// This CellML file was generated on 8/04/2010 at 1:42:58 at p.m. using:
//
// COR (0.9.31.1371)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// title: Dynamics of Muscle Glycogenolysis Modeled with pH Time Course Computation and pH-Dependent Reaction Equilibria and Enzyme Kinetics (Experiment 29, 0.2% Glycogen Phosphorylase A)
// creator: Family Nunns; Given Geoffrey; Other Rogan; gnunns1@jhu.edu; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-04-08
// title: The Vinnakota et al. 2006 model of muscle glycogenolysis featuring pH time course computation, pH-dependent reaction equilibria and enzyme kinetics.
// comment: This is the CellML description of Vinnakota et al.'s mathematical model of muscle glycogenolysis.; FN Geoffrey Nunns
// species: Human
// bio_entity: myocyte
// reference: subject_type keyword; metabolism; glycogenolysis; glycolysis; muscle
// reference: Pubmed_id 16617075; Family Vinnakota; Given Kalyan; Family Kemp; Given Melissa; Other L; Family Kushmeric; Given Martin; Other J; title Dynamics of Muscle Glycogenolysis Modeled with pH Time Course Computation and pH-Dependent Reaction Equilibria and Enzyme Kinetics; W3CDTF 2006-03-27; title Biophysical Journal; volume 91; first_page 1264; last_page 1287
def model vinnakota_kemp_kusmeric_2006_exp29frA02 as
  // Dynamics of Muscle Glycogenolysis Modeled with pH Time Course Computation and pH-Dependent Reaction Equilibria and Enzyme Kinetics
  //
  // Geoffrey Nunns
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in PCenv, COR and OpenCell to recreate the published results. The model was adapted from the original matlab, and the units are consistent throughout. This particular model replicates experiment 29, with the fraction of Glycogen Phosphorylase A set to 0.2%, and can reproduce figures 3, 4, 6, 10, 11 and 18 from the original paper.
  //
  // Model Structure
  //
  // ABSTRACT: Cellular metabolites are moieties defined by their specific binding constants to H1, Mg21, and K1 or anions without ligands. As a consequence, every biochemical reaction in the cytoplasm has an associated proton stoichiometry that is generally noninteger- and pH-dependent. Therefore, with metabolic flux, pH is altered in a medium with finite buffer capacity. Apparent equilibrium constants and maximum enzyme velocities, which are functions of pH, are also altered. We augmented an earlier mathematical model of skeletal muscle glycogenolysis with pH-dependent enzyme kinetics and reaction equilibria to compute the time course of pH changes. Analysis shows that kinetics and final equilibrium states of the closed system are highly constrained by the pH-dependent parameters. This kinetic model of glycogenolysis, coupled to creatine kinase and adenylate kinase, simulated published experiments made with a cell-free enzyme mixture to reconstitute the network and to synthesize PCr and lactate in vitro. Using the enzyme kinetic and thermodynamic data in the literature, the simulations required minimal adjustments of parameters to describe the data. These results show that incorporation of appropriate physical chemistry of the reactions with accurate kinetic modeling gives a reasonable simulation of experimental data and is necessary for a physically correct representation of the metabolic network. The approach is general for modeling metabolic networks beyond the specific pathway and conditions presented here.
  //
  // The original paper reference is cited below:
  //
  // Dynamics of Muscle Glycogenolysis Modeled with pH Time Course Computation and pH-Dependent Reaction Equilibria and Enzyme Kinetics, Kalyan Vinnakota, Melissa L. Kemp, and Martin J. Kushmerick, 2006, Biophysical Journal, volume 91, 1264-1287. PubMed ID: 16617075 (http://www.ncbi.nlm.nih.gov/pubmed/16617075)
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit molar as
    unit mole;
    unit liter {expo: -1};
  enddef;
  def unit molar_per_minute as
    unit molar;
    unit minute {expo: -1};
  enddef;
  def unit per_minute as
    unit minute {expo: -1};
  enddef;
  def unit kilojoule_per_mole as
    unit joule {pref: kilo};
    unit mole {expo: -1};
  enddef;
  def unit mole_per_kilojoule as
    unit joule {pref: kilo, expo: -1};
    unit mole;
  enddef;
  def unit kilojoule_per_kelvin_per_mole as
    unit joule {pref: kilo};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit kilojoule_half_liter_per_3_half_mole as
    unit joule {pref: kilo};
    unit liter {expo: 0.5};
    unit mole {expo: -1.5};
  enddef;
  def unit per_half_molar as
    unit molar {expo: -0.5};
  enddef;
  def unit per_molar as
    unit molar {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
    var pH_cy: dimensionless {pub: out};
    var addbuffer: dimensionless;
    var pHstat: dimensionless;
    var Par_97: dimensionless {pub: in};
    var Par_98: dimensionless {pub: in};
    var pH_calc: dimensionless {pub: in};
    addbuffer = Par_97;
    pHstat = Par_98;
    pH_cy = sel
      case (time <= 1{minute}) or ((time > 1{minute}) and (addbuffer == 0{dimensionless})):
        pH_calc;
      otherwise:
        pHstat;
    endsel;
  enddef;

  def comp global_parameters as
    var R: kilojoule_per_kelvin_per_mole {init: 8.314e-3, pub: out};
    var T1: kelvin {init: 298.15, pub: out};
    var T: kelvin {pub: out};
    var I: molar {pub: out};
    var Par_90: molar {pub: in};
    var Par_94: kelvin {pub: in};
    T = Par_94;
    I = Par_90;
  enddef;

  def comp parameters as
    var Par_1: molar_per_minute {pub: out};
    var Par_2: dimensionless {pub: out};
    var Par_3: molar {pub: out};
    var Par_4: molar {pub: out};
    var Par_5: molar {pub: out};
    var Par_6: molar {pub: out};
    var Par_7: molar {pub: out};
    var Par_8: molar {pub: out};
    var Par_9: molar {pub: out};
    var Par_10: molar {pub: out};
    var Par_11: molar {pub: out};
    var Par_12: molar {pub: out};
    var Par_13: molar {pub: out};
    var Par_14: molar {pub: out};
    var Par_15: molar {pub: out};
    var Par_16: molar {pub: out};
    var Par_17: dimensionless {pub: out};
    var Par_18: dimensionless {pub: out};
    var Par_19: molar_per_minute {pub: out};
    var Par_20: molar {pub: out};
    var Par_21: molar {pub: out};
    var Par_22: molar_per_minute {pub: out};
    var Par_23: molar {pub: out};
    var Par_24: molar {pub: out};
    var Par_25: molar_per_minute {pub: out};
    var Par_26: molar {pub: out};
    var Par_27: molar {pub: out};
    var Par_28: molar {pub: out};
    var Par_29: molar {pub: out};
    var Par_30: molar {pub: out};
    var Par_31: molar {pub: out};
    var Par_32: molar {pub: out};
    var Par_33: molar {pub: out};
    var Par_34: molar {pub: out};
    var Par_35: molar {pub: out};
    var Par_36: dimensionless {pub: out};
    var Par_37: dimensionless {pub: out};
    var Par_38: dimensionless {pub: out};
    var Par_39: molar_per_minute {pub: out};
    var Par_40: molar {pub: out};
    var Par_41: molar {pub: out};
    var Par_42: molar {pub: out};
    var Par_43: molar_per_minute {pub: out};
    var Par_44: molar {pub: out};
    var Par_45: molar {pub: out};
    var Par_46: molar_per_minute {pub: out};
    var Par_47: molar {pub: out};
    var Par_48: molar {pub: out};
    var Par_49: molar {pub: out};
    var Par_50: molar {pub: out};
    var Par_51: molar_per_minute {pub: out};
    var Par_52: molar {pub: out};
    var Par_53: molar {pub: out};
    var Par_54: molar {pub: out};
    var Par_55: molar {pub: out};
    var Par_56: molar {pub: out};
    var Par_57: molar_per_minute {pub: out};
    var Par_58: molar {pub: out};
    var Par_59: molar {pub: out};
    var Par_60: molar {pub: out};
    var Par_61: molar {pub: out};
    var Par_62: molar_per_minute {pub: out};
    var Par_63: molar {pub: out};
    var Par_64: molar {pub: out};
    var Par_65: molar_per_minute {pub: out};
    var Par_66: molar {pub: out};
    var Par_67: molar {pub: out};
    var Par_68: molar_per_minute {pub: out};
    var Par_69: molar {pub: out};
    var Par_70: molar {pub: out};
    var Par_71: molar {pub: out};
    var Par_72: molar {pub: out};
    var Par_73: molar_per_minute {pub: out};
    var Par_74: molar {pub: out};
    var Par_75: molar {pub: out};
    var Par_76: molar {pub: out};
    var Par_77: molar {pub: out};
    var Par_78: molar_per_minute {pub: out};
    var Par_79: molar {pub: out};
    var Par_80: molar {pub: out};
    var Par_81: molar {pub: out};
    var Par_82: molar {pub: out};
    var Par_83: molar {pub: out};
    var Par_84: molar_per_minute {pub: out};
    var Par_85: molar {pub: out};
    var Par_86: molar {pub: out};
    var Par_87: molar {pub: out};
    var Par_88: molar_per_minute {pub: out};
    var Par_89: molar {pub: out};
    var Par_90: molar {pub: out};
    var Par_91: molar {pub: out};
    var Par_92: molar {pub: out};
    var Par_93: molar {pub: out};
    var Par_94: kelvin {pub: out};
    var Par_95: molar {pub: out};
    var Par_96: molar {pub: out};
    var Par_97: dimensionless {pub: out};
    var Par_98: dimensionless {pub: out};
    var Par_99: dimensionless {pub: out};
    var Par_100: dimensionless {pub: out};
    Par_1 = 5e-2{molar_per_minute};
    Par_2 = 2e-3{dimensionless};
    Par_3 = 1.7e-3{molar};
    Par_4 = 4e-3{molar};
    Par_5 = 2e-3{molar};
    Par_6 = 4.7e-3{molar};
    Par_7 = 1.5e-4{molar};
    Par_8 = 2.7e-3{molar};
    Par_9 = 1.01e-2{molar};
    Par_10 = 2e-4{molar};
    Par_11 = 4.6e-3{molar};
    Par_12 = 1.5e-2{molar};
    Par_13 = 1.5e-3{molar};
    Par_14 = 7.4e-3{molar};
    Par_15 = 4.4e-3{molar};
    Par_16 = 0.00266054976219{molar};
    Par_17 = 2e-2{dimensionless};
    Par_18 = 1.7505240494613{dimensionless};
    Par_19 = 4.8e-1{molar_per_minute};
    Par_20 = 6.3e-5{molar};
    Par_21 = 3e-5{molar};
    Par_22 = 8.8e-1{molar_per_minute};
    Par_23 = 4.8e-4{molar};
    Par_24 = 1.19e-4{molar};
    Par_25 = 5.6e-2{molar_per_minute};
    Par_26 = 1.8e-4{molar};
    Par_27 = 2e-2{molar};
    Par_28 = 8e-5{molar};
    Par_29 = 2.5e-4{molar};
    Par_30 = 4.02e-3{molar};
    Par_31 = 4.02e-3{molar};
    Par_32 = 2.7e-3{molar};
    Par_33 = 2.7e-3{molar};
    Par_34 = 8.7e-4{molar};
    Par_35 = 6e-5{molar};
    Par_36 = 1e-2{dimensionless};
    Par_37 = 1e-2{dimensionless};
    Par_38 = 13{dimensionless};
    Par_39 = 0.01065914307349{molar_per_minute};
    Par_40 = 5e-5{molar};
    Par_41 = 2e-3{molar};
    Par_42 = 1e-3{molar};
    Par_43 = 12{molar_per_minute};
    Par_44 = 3.2e-4{molar};
    Par_45 = 6.1e-4{molar};
    Par_46 = 8.25e-2{molar_per_minute};
    Par_47 = 1.8e-4{molar};
    Par_48 = 1.2e-5{molar};
    Par_49 = 2.2e-4{molar};
    Par_50 = 8e-6{molar};
    Par_51 = 1.265e0{molar_per_minute};
    Par_52 = 2.5e-6{molar};
    Par_53 = 9e-5{molar};
    Par_54 = 2.9e-4{molar};
    Par_55 = 8e-7{molar};
    Par_56 = 3.3e-6{molar};
    Par_57 = 1.12e0{molar_per_minute};
    Par_58 = 2e-3{molar};
    Par_59 = 8e-6{molar};
    Par_60 = 1.2e-3{molar};
    Par_61 = 3.5e-4{molar};
    Par_62 = 1.12e0{molar_per_minute};
    Par_63 = 2e-4{molar};
    Par_64 = 1.4e-5{molar};
    Par_65 = 1.92e-1{molar_per_minute};
    Par_66 = 1e-4{molar};
    Par_67 = 3.7e-4{molar};
    Par_68 = 1.44e0{molar_per_minute};
    Par_69 = 8e-5{molar};
    Par_70 = 3e-4{molar};
    Par_71 = 7.05e-3{molar};
    Par_72 = 1.13e-3{molar};
    Par_73 = 1.92e0{molar_per_minute};
    Par_74 = 3.35e-4{molar};
    Par_75 = 2e-6{molar};
    Par_76 = 1.7e-2{molar};
    Par_77 = 8.49e-4{molar};
    Par_78 = 5e-1{molar_per_minute};
    Par_79 = 1.11e-3{molar};
    Par_80 = 3.5e-3{molar};
    Par_81 = 1.35e-4{molar};
    Par_82 = 3.9e-3{molar};
    Par_83 = 3.8e-3{molar};
    Par_84 = 8.8e-1{molar_per_minute};
    Par_85 = 3.2e-4{molar};
    Par_86 = 2.7e-4{molar};
    Par_87 = 3.5e-4{molar};
    Par_88 = 0{molar_per_minute};
    Par_89 = 1e-4{molar};
    Par_90 = 1e-1{molar};
    Par_91 = 1.5e-2{molar};
    Par_92 = 2.5e-2{molar};
    Par_93 = 1e-2{molar};
    Par_94 = 303.15{kelvin};
    Par_95 = 0.005{molar};
    Par_96 = 0.08{molar};
    Par_97 = 1{dimensionless};
    Par_98 = 7.4{dimensionless};
    Par_99 = 1{dimensionless};
    Par_100 = 29{dimensionless};
  enddef;

  def comp equilibrium_constants as
    var mgT: molar {pub: out};
    var k: molar {pub: out};
    var c0: molar {pub: out};
    var Par_95: molar {pub: in};
    var Par_96: molar {pub: in};
    mgT = Par_95;
    k = Par_96;
    c0 = 1{molar};
  enddef;

  def comp correction_factors as
    var RT2dadT: kilojoule_half_liter_per_3_half_mole;
    var B: per_half_molar;
    var Icorr: kilojoule_per_mole;
    var I1: molar;
    var alphadebye: per_half_molar;
    var IcorrpKa: kilojoule_per_mole;
    var TcorrpKa: mole_per_kilojoule;
    var RTalpha: kilojoule_half_liter_per_3_half_mole;
    var IcorrdeltaGpof: kilojoule_per_mole;
    var pKak_Pi: dimensionless;
    var deltaH1o_Pi: kilojoule_per_mole;
    var deltaHmgo_Pi: kilojoule_per_mole;
    var deltaH1_Pi: kilojoule_per_mole;
    var deltaHmg_Pi: kilojoule_per_mole;
    var pKa1_Pi: dimensionless;
    var pKamg_Pi: dimensionless;
    var P_Pi: dimensionless;
    var HPi2: dimensionless;
    var H2Pi1: dimensionless;
    var kPi: dimensionless;
    var mgPi: dimensionless {pub: out};
    var Navg_Pi: dimensionless;
    var dNavgPidH: per_molar {pub: out};
    var dNavgPidmg: per_molar {pub: out};
    var dmgPidmg: per_molar {pub: out};
    var dmgPidpH: dimensionless {pub: out};
    var NH_HPi2: dimensionless;
    var deltaGof_HPi2: kilojoule_per_mole;
    var deltaGpof_HPi2: kilojoule_per_mole;
    var deltaH1o_ATP: kilojoule_per_mole;
    var deltaHmgo_ATP: kilojoule_per_mole;
    var deltaHko_ATP: kilojoule_per_mole;
    var deltaH1_ATP: kilojoule_per_mole;
    var deltaHmg_ATP: kilojoule_per_mole;
    var deltaHk_ATP: kilojoule_per_mole;
    var pKa1_ATP: dimensionless;
    var pKamg_ATP: dimensionless;
    var pKak_ATP: dimensionless;
    var P_ATP: dimensionless;
    var ATP4: dimensionless;
    var HATP3: dimensionless;
    var mgATP2: dimensionless {pub: out};
    var kATP: dimensionless;
    var Navg_ATP: dimensionless;
    var dNavgATPdH: per_molar {pub: out};
    var dNavgATPdmg: per_molar {pub: out};
    var dmgATP2dmg: per_molar {pub: out};
    var dmgATP2dpH: dimensionless {pub: out};
    var NH_ATP4: dimensionless;
    var deltaGof_ATP4: kilojoule_per_mole;
    var deltaGpof_ATP4: kilojoule_per_mole;
    var pKak_ADP: dimensionless;
    var deltaH1o_ADP: kilojoule_per_mole;
    var deltaHmgo_ADP: kilojoule_per_mole;
    var deltaH1_ADP: kilojoule_per_mole;
    var deltaHmg_ADP: kilojoule_per_mole;
    var pKa1_ADP: dimensionless;
    var pKamg_ADP: dimensionless;
    var P_ADP: dimensionless;
    var ADP3: dimensionless;
    var HADP2: dimensionless;
    var mgADP: dimensionless {pub: out};
    var kADP: dimensionless;
    var Navg_ADP: dimensionless;
    var dNavgADPdH: per_molar {pub: out};
    var dNavgADPdmg: per_molar {pub: out};
    var dmgADPdmg: per_molar {pub: out};
    var dmgADPdpH: dimensionless {pub: out};
    var NH_ADP3: dimensionless;
    var deltaGof_ADP3: kilojoule_per_mole;
    var deltaGpof_ADP3: kilojoule_per_mole;
    var deltaH1o_AMP: kilojoule_per_mole;
    var deltaHmgo_AMP: kilojoule_per_mole;
    var deltaH1_AMP: kilojoule_per_mole;
    var deltaHmg_AMP: kilojoule_per_mole;
    var pKa1_AMP: dimensionless;
    var pKamg_AMP: dimensionless;
    var P_AMP: dimensionless;
    var AMP2: dimensionless;
    var HAMP1: dimensionless;
    var mgAMP: dimensionless {pub: out};
    var Navg_AMP: dimensionless;
    var dNavgAMPdH: per_molar {pub: out};
    var dNavgAMPdmg: per_molar {pub: out};
    var dmgAMPdmg: per_molar {pub: out};
    var dmgAMPdpH: dimensionless {pub: out};
    var NH_AMP2: dimensionless;
    var deltaGof_AMP2: kilojoule_per_mole;
    var deltaGpof_AMP2: kilojoule_per_mole;
    var pKak_PCR: dimensionless;
    var deltaH1o_PCR: kilojoule_per_mole;
    var deltaHmgo_PCR: kilojoule_per_mole;
    var deltaH1_PCR: kilojoule_per_mole;
    var deltaHmg_PCR: kilojoule_per_mole;
    var pKa1_PCR: dimensionless;
    var pKamg_PCR: dimensionless;
    var P_PCR: dimensionless;
    var HPCR: dimensionless;
    var H2PCR: dimensionless;
    var kPCR: dimensionless;
    var mgPCR: dimensionless {pub: out};
    var Navg_PCR: dimensionless;
    var dNavgPCRdH: per_molar {pub: out};
    var dNavgPCRdmg: per_molar {pub: out};
    var dmgPCRdmg: per_molar {pub: out};
    var dmgPCRdpH: dimensionless {pub: out};
    var NH_HPCR: dimensionless;
    var pKa1_CR: dimensionless;
    var P_CR: dimensionless;
    var HCR: dimensionless;
    var H2CR: dimensionless;
    var Navg_CR: dimensionless;
    var dNavgCRdH: per_molar {pub: out};
    var dNavgCRdmg: per_molar {pub: out};
    var NH_HCR: dimensionless;
    var deltaH1o_G1P: kilojoule_per_mole;
    var deltaHmgo_G1P: kilojoule_per_mole;
    var deltaH1_G1P: kilojoule_per_mole;
    var deltaHmg_G1P: kilojoule_per_mole;
    var pKa1_G1P: dimensionless;
    var pKamg_G1P: dimensionless;
    var P_G1P: dimensionless;
    var UG1P: dimensionless;
    var HG1P: dimensionless;
    var mgG1P: dimensionless {pub: out};
    var Navg_G1P: dimensionless;
    var dNavgG1PdH: per_molar {pub: out};
    var dNavgG1Pdmg: per_molar {pub: out};
    var dmgG1Pdmg: per_molar {pub: out};
    var dmgG1PdpH: dimensionless {pub: out};
    var NH_UG1P: dimensionless;
    var deltaGof_UG1P: kilojoule_per_mole;
    var deltaGpof_UG1P: kilojoule_per_mole;
    var pKa1_G6P: dimensionless;
    var P_G6P: dimensionless;
    var UG6P: dimensionless;
    var HG6P: dimensionless;
    var Navg_G6P: dimensionless;
    var dNavgG6PdH: per_molar {pub: out};
    var dNavgG6Pdmg: per_molar {pub: out};
    var NH_UG6P: dimensionless;
    var deltaGof_UG6P: kilojoule_per_mole;
    var deltaGpof_UG6P: kilojoule_per_mole;
    var pKa1_F6P: dimensionless;
    var P_F6P: dimensionless;
    var UF6P: dimensionless;
    var HF6P: dimensionless;
    var Navg_F6P: dimensionless;
    var dNavgF6PdH: per_molar {pub: out};
    var dNavgF6Pdmg: per_molar {pub: out};
    var NH_UF6P: dimensionless;
    var deltaGof_UF6P: kilojoule_per_mole;
    var deltaGpof_UF6P: kilojoule_per_mole;
    var pKa1_FDP: dimensionless;
    var pKa2_FDP: dimensionless;
    var pKamg_FDP: dimensionless;
    var P_FDP: dimensionless;
    var UFDP: dimensionless;
    var HFDP: dimensionless;
    var H2FDP: dimensionless;
    var mgFDP: dimensionless {pub: out};
    var Navg_FDP: dimensionless;
    var dNavgFDPdH: per_molar {pub: out};
    var dNavgFDPdmg: per_molar {pub: out};
    var dmgFDPdmg: per_molar {pub: out};
    var dmgFDPdpH: dimensionless {pub: out};
    var NH_UFDP: dimensionless;
    var deltaGof_UFDP: kilojoule_per_mole;
    var deltaGpof_UFDP: kilojoule_per_mole;
    var pKa1_GAP: dimensionless;
    var P_GAP: dimensionless;
    var UGAP: dimensionless;
    var HGAP: dimensionless;
    var Navg_GAP: dimensionless;
    var dNavgGAPdH: per_molar {pub: out};
    var dNavgGAPdmg: per_molar {pub: out};
    var NH_UGAP: dimensionless;
    var deltaGof_UGAP: kilojoule_per_mole;
    var deltaGpof_UGAP: kilojoule_per_mole;
    var pKamg_G3P: dimensionless;
    var deltaH1o_G3P: kilojoule_per_mole;
    var deltaH1_G3P: kilojoule_per_mole;
    var pKa1_G3P: dimensionless;
    var P_G3P: dimensionless;
    var UG3P: dimensionless;
    var HG3P: dimensionless;
    var mgG3P: dimensionless {pub: out};
    var Navg_G3P: dimensionless;
    var dNavgG3PdH: per_molar {pub: out};
    var dNavgG3Pdmg: per_molar {pub: out};
    var dmgG3Pdmg: per_molar {pub: out};
    var dmgG3PdpH: dimensionless {pub: out};
    var NH_UG3P: dimensionless;
    var deltaGof_UG3P: kilojoule_per_mole;
    var deltaGpof_UG3P: kilojoule_per_mole;
    var pKa1_DHAP: dimensionless;
    var pKamg_DHAP: dimensionless;
    var P_DHAP: dimensionless;
    var UDHAP: dimensionless;
    var HDHAP: dimensionless;
    var mgDHAP: dimensionless {pub: out};
    var Navg_DHAP: dimensionless;
    var dNavgDHAPdH: per_molar {pub: out};
    var dNavgDHAPdmg: per_molar {pub: out};
    var dmgDHAPdmg: per_molar {pub: out};
    var dmgDHAPdpH: dimensionless {pub: out};
    var NH_UDHAP: dimensionless;
    var deltaGof_UDHAP: kilojoule_per_mole;
    var deltaGpof_UDHAP: kilojoule_per_mole;
    var pKa1_13DPG: dimensionless;
    var P_13DPG: dimensionless;
    var U13DPG: dimensionless;
    var H13DPG: dimensionless;
    var Navg_13DPG: dimensionless;
    var dNavg13DPGdH: per_molar {pub: out};
    var dNavg13DPGdmg: per_molar {pub: out};
    var NH_U13DPG: dimensionless;
    var deltaGof_U13DPG: kilojoule_per_mole;
    var deltaGpof_U13DPG: kilojoule_per_mole;
    var pKa1_3PG: dimensionless;
    var P_3PG: dimensionless;
    var U3PG: dimensionless;
    var H3PG: dimensionless;
    var Navg_3PG: dimensionless;
    var dNavg3PGdH: per_molar {pub: out};
    var dNavg3PGdmg: per_molar {pub: out};
    var NH_U3PG: dimensionless;
    var deltaGof_U3PG: kilojoule_per_mole;
    var deltaGpof_U3PG: kilojoule_per_mole;
    var pKa1_2PG: dimensionless;
    var pKamg_2PG: dimensionless;
    var pKak_2PG: dimensionless;
    var P_2PG: dimensionless;
    var U2PG: dimensionless;
    var H2PG: dimensionless;
    var mg2PG: dimensionless {pub: out};
    var k2PG: dimensionless;
    var Navg_2PG: dimensionless;
    var dNavg2PGdH: per_molar {pub: out};
    var dNavg2PGdmg: per_molar {pub: out};
    var dmg2PGdmg: per_molar {pub: out};
    var dmg2PGdpH: dimensionless {pub: out};
    var NH_U2PG: dimensionless;
    var deltaGof_U2PG: kilojoule_per_mole;
    var deltaGpof_U2PG: kilojoule_per_mole;
    var pKa1_PEP: dimensionless;
    var pKamg_PEP: dimensionless;
    var pKak_PEP: dimensionless;
    var P_PEP: dimensionless;
    var UPEP: dimensionless;
    var HPEP: dimensionless;
    var kPEP: dimensionless;
    var mgPEP: dimensionless {pub: out};
    var Navg_PEP: dimensionless;
    var dNavgPEPdH: per_molar {pub: out};
    var dNavgPEPdmg: per_molar {pub: out};
    var dmgPEPdmg: per_molar {pub: out};
    var dmgPEPdpH: dimensionless {pub: out};
    var NH_UPEP: dimensionless;
    var deltaGof_UPEP: kilojoule_per_mole;
    var deltaGpof_UPEP: kilojoule_per_mole;
    var pKa1_PYR: dimensionless;
    var P_PYR: dimensionless;
    var UPYR: dimensionless;
    var HPYR: dimensionless;
    var Navg_PYR: dimensionless;
    var dNavgPYRdH: per_molar {pub: out};
    var dNavgPYRdmg: per_molar {pub: out};
    var NH_UPYR: dimensionless;
    var deltaGof_UPYR: kilojoule_per_mole;
    var deltaGpof_UPYR: kilojoule_per_mole;
    var pKamg_LAC: dimensionless;
    var deltaH1o_LAC: kilojoule_per_mole;
    var deltaH1_LAC: kilojoule_per_mole;
    var pKa1_LAC: dimensionless;
    var P_LAC: dimensionless;
    var ULAC: dimensionless;
    var HLAC: dimensionless;
    var mgLAC: dimensionless {pub: out};
    var Navg_LAC: dimensionless;
    var dNavgLACdH: per_molar {pub: out};
    var dNavgLACdmg: per_molar {pub: out};
    var dmgLACdmg: per_molar {pub: out};
    var dmgLACdpH: dimensionless {pub: out};
    var NH_ULAC: dimensionless;
    var deltaGof_ULAC: kilojoule_per_mole;
    var deltaGpof_ULAC: kilojoule_per_mole;
    var dNH_GLY: dimensionless;
    var deltaGpo_GLY: kilojoule_per_mole;
    var NH_NAD: dimensionless;
    var deltaGof_NAD: kilojoule_per_mole;
    var deltaGpof_NAD: kilojoule_per_mole;
    var NH_NADH: dimensionless;
    var deltaGof_NADH: kilojoule_per_mole;
    var deltaGpof_NADH: kilojoule_per_mole;
    var NH_H2O: dimensionless;
    var deltaGof_H2O: kilojoule_per_mole;
    var deltaGpof_H2O: kilojoule_per_mole;
    var NH_H: dimensionless;
    var deltaGof_H: kilojoule_per_mole;
    var deltaGpof_H: kilojoule_per_mole;
    var deltaH_CK: dimensionless {pub: out};
    var Kref_CK: dimensionless;
    var deltaHo_CKo: kilojoule_per_mole;
    var deltaH1_CK: kilojoule_per_mole;
    var Kref_CKI: dimensionless;
    var Kref_CKT: dimensionless;
    var deltaGpo_CK: kilojoule_per_mole;
    var Kapp_CK: dimensionless {pub: out};
    var deltaH_ADK: dimensionless {pub: out};
    var deltaGpo_ADK: kilojoule_per_mole;
    var Kapp_ADK: dimensionless {pub: out};
    var deltaH_GP: dimensionless {pub: out};
    var deltaGpo_GP: kilojoule_per_mole;
    var Kapp_GP: dimensionless {pub: out};
    var deltaH_PGLM: dimensionless {pub: out};
    var deltaGpo_PGLM: kilojoule_per_mole;
    var Kapp_PGLM: dimensionless {pub: out};
    var deltaH_PGI: dimensionless {pub: out};
    var deltaGpo_PGI: kilojoule_per_mole;
    var Kapp_PGI: dimensionless {pub: out};
    var deltaH_PFK: dimensionless {pub: out};
    var deltaGpo_PFK: kilojoule_per_mole;
    var Kapp_PFK: dimensionless {pub: out};
    var deltaH_ALD: dimensionless {pub: out};
    var deltaGpo_ALD: kilojoule_per_mole;
    var Kapp_ALD: molar {pub: out};
    var deltaH_TPI: dimensionless {pub: out};
    var deltaGpo_TPI: kilojoule_per_mole;
    var Kapp_TPI: dimensionless {pub: out};
    var deltaH_GAPDH: dimensionless {pub: out};
    var deltaGpo_GAPDH: kilojoule_per_mole;
    var Kapp_GAPDH: per_molar {pub: out};
    var deltaH_G3PDH: dimensionless {pub: out};
    var deltaGpo_G3PDH: kilojoule_per_mole;
    var Kapp_G3PDH: dimensionless {pub: out};
    var deltaH_PGK: dimensionless {pub: out};
    var deltaGpo_PGK: kilojoule_per_mole;
    var Kapp_PGK: dimensionless {pub: out};
    var deltaH_PGM: dimensionless {pub: out};
    var deltaGpo_PGM: kilojoule_per_mole;
    var Kapp_PGM: dimensionless {pub: out};
    var deltaH_ENOL: dimensionless {pub: out};
    var deltaGpo_ENOL: kilojoule_per_mole;
    var Kapp_ENOL: dimensionless {pub: out};
    var deltaH_PK: dimensionless {pub: out};
    var deltaGpo_PK: kilojoule_per_mole;
    var Kapp_PK: dimensionless {pub: out};
    var deltaH_LDH: dimensionless {pub: out};
    var deltaGpo_LDH: kilojoule_per_mole;
    var Kapp_LDH: dimensionless {pub: out};
    var deltaH_ATPase: dimensionless {pub: out};
    var deltaGpo_ATPase: kilojoule_per_mole;
    var Kapp_ATPase: dimensionless {pub: out};
    var R: kilojoule_per_kelvin_per_mole {pub: in};
    var T1: kelvin {pub: in};
    var T: kelvin {pub: in};
    var I: molar {pub: in};
    var mgT: molar {pub: in};
    var k: molar {pub: in};
    var c0: molar {pub: in};
    var mg: molar {pub: in};
    var pH_cy: dimensionless {pub: in};
    RT2dadT = 1.4775{kilojoule_half_liter_per_3_half_mole};
    B = 1.6{per_half_molar};
    Icorr = RT2dadT*sqrt(I)/(1{dimensionless}+B*sqrt(I));
    I1 = 0.1{molar};
    alphadebye = 1.17582{per_half_molar};
    IcorrpKa = 1{kilojoule_per_mole}*alphadebye*(sqrt(I1)/(1{dimensionless}+B*sqrt(I1))-sqrt(I)/(1{dimensionless}+B*sqrt(I)))/ln(10{dimensionless});
    TcorrpKa = (1{dimensionless}/T-1{dimensionless}/T1)/(ln(10{dimensionless})*R);
    RTalpha = 2.91482{kilojoule_half_liter_per_3_half_mole};
    IcorrdeltaGpof = RTalpha*sqrt(I)/(1{dimensionless}+B*sqrt(I));
    pKak_Pi = 0.5{dimensionless};
    deltaH1o_Pi = 3{kilojoule_per_mole};
    deltaHmgo_Pi = -2.9{kilojoule_per_mole};
    deltaH1_Pi = deltaH1o_Pi+Icorr*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    deltaHmg_Pi = deltaHmgo_Pi+Icorr*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}));
    pKa1_Pi = 6.75{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}))+TcorrpKa*deltaH1_Pi;
    pKamg_Pi = 1.65{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}))+TcorrpKa*deltaHmg_Pi;
    P_Pi = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_Pi)+mg/c0*pow(10{dimensionless}, pKamg_Pi)+k/c0*pow(10{dimensionless}, pKak_Pi);
    HPi2 = 1{dimensionless}/P_Pi;
    H2Pi1 = pow(10{dimensionless}, -pH_cy+pKa1_Pi)*HPi2;
    kPi = k/c0*pow(10{dimensionless}, pKak_Pi)*HPi2;
    mgPi = mg/c0*pow(10{dimensionless}, pKamg_Pi)*HPi2;
    Navg_Pi = 1{dimensionless}*H2Pi1;
    dNavgPidH = pow(10{dimensionless}, pKa1_Pi)*(P_Pi-pow(10{dimensionless}, -pH_cy+pKa1_Pi))/(c0*sqr(P_Pi));
    dNavgPidmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_Pi+pKamg_Pi)/sqr(P_Pi);
    dmgPidmg = (P_Pi*pow(10{dimensionless}, pKamg_Pi)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_Pi)/c0)/sqr(P_Pi);
    dmgPidpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_Pi+pKamg_Pi)*ln(10{dimensionless})/sqr(P_Pi);
    NH_HPi2 = 1{dimensionless};
    deltaGof_HPi2 = -1096.1{kilojoule_per_mole};
    deltaGpof_HPi2 = deltaGof_HPi2+NH_HPi2*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_HPi2);
    deltaH1o_ATP = -5{kilojoule_per_mole};
    deltaHmgo_ATP = -18{kilojoule_per_mole};
    deltaHko_ATP = -1{kilojoule_per_mole};
    deltaH1_ATP = deltaH1o_ATP+Icorr*(sqr(4{dimensionless})+sqr(1{dimensionless})-sqr(3{dimensionless}));
    deltaHmg_ATP = deltaHmgo_ATP+Icorr*(sqr(4{dimensionless})+sqr(2{dimensionless})-sqr(2{dimensionless}));
    deltaHk_ATP = deltaHko_ATP+Icorr*(sqr(4{dimensionless})+sqr(1{dimensionless})-sqr(3{dimensionless}));
    pKa1_ATP = 6.48{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(4{dimensionless})+sqr(1{dimensionless})-sqr(3{dimensionless}))+TcorrpKa*deltaH1_ATP;
    pKamg_ATP = 4.19{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(4{dimensionless})+sqr(2{dimensionless})-sqr(2{dimensionless}))+TcorrpKa*deltaHmg_ATP;
    pKak_ATP = 1.17{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(4{dimensionless})+sqr(1{dimensionless})-sqr(3{dimensionless}))+TcorrpKa*deltaHk_ATP;
    P_ATP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_ATP)+mg/c0*pow(10{dimensionless}, pKamg_ATP)+k/c0*pow(10{dimensionless}, pKak_ATP);
    ATP4 = 1{dimensionless}/P_ATP;
    HATP3 = pow(10{dimensionless}, -pH_cy+pKa1_ATP)*ATP4;
    mgATP2 = mg/c0*pow(10{dimensionless}, pKamg_ATP)*ATP4;
    kATP = k/c0*pow(10{dimensionless}, pKak_ATP)*ATP4;
    Navg_ATP = 0{dimensionless}*ATP4+1{dimensionless}*HATP3+0{dimensionless}*mgATP2+0{dimensionless}*kATP;
    dNavgATPdH = pow(10{dimensionless}, pKa1_ATP)*(P_ATP-pow(10{dimensionless}, -pH_cy+pKa1_ATP))/(c0*sqr(P_ATP));
    dNavgATPdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_ATP+pKamg_ATP)/sqr(P_ATP);
    dmgATP2dmg = (P_ATP*pow(10{dimensionless}, pKamg_ATP)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_ATP)/c0)/sqr(P_ATP);
    dmgATP2dpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_ATP+pKamg_ATP)*ln(10{dimensionless})/sqr(P_ATP);
    NH_ATP4 = 12{dimensionless};
    deltaGof_ATP4 = -2768.1{kilojoule_per_mole};
    deltaGpof_ATP4 = deltaGof_ATP4+NH_ATP4*R*T*ln(10{dimensionless})*pH_cy-IcorrdeltaGpof*(16{dimensionless}-NH_ATP4);
    pKak_ADP = 1{dimensionless};
    deltaH1o_ADP = -3{kilojoule_per_mole};
    deltaHmgo_ADP = -15{kilojoule_per_mole};
    deltaH1_ADP = deltaH1o_ADP+Icorr*(sqr(3{dimensionless})+sqr(1{dimensionless})-sqr(2{dimensionless}));
    deltaHmg_ADP = deltaHmgo_ADP+Icorr*(sqr(3{dimensionless})+sqr(2{dimensionless})-sqr(1{dimensionless}));
    pKa1_ADP = 6.38{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(3{dimensionless})+sqr(1{dimensionless})-sqr(2{dimensionless}))+TcorrpKa*deltaH1_ADP;
    pKamg_ADP = 3.25{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(3{dimensionless})+sqr(2{dimensionless})-sqr(1{dimensionless}))+TcorrpKa*deltaHmg_ADP;
    P_ADP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_ADP)+mg/c0*pow(10{dimensionless}, pKamg_ADP)+k/c0*pow(10{dimensionless}, pKak_ADP);
    ADP3 = 1{dimensionless}/P_ADP;
    HADP2 = pow(10{dimensionless}, -pH_cy+pKa1_ADP)*ADP3;
    mgADP = ADP3*mg/c0*pow(10{dimensionless}, pKamg_ADP);
    kADP = ADP3*k/c0*pow(10{dimensionless}, pKak_ADP);
    Navg_ADP = 0{dimensionless}*ADP3+1{dimensionless}*HADP2+0{dimensionless}*mgADP+0{dimensionless}*kADP;
    dNavgADPdH = pow(10{dimensionless}, pKa1_ADP)*(P_ADP-pow(10{dimensionless}, -pH_cy+pKa1_ADP))/(c0*sqr(P_ADP));
    dNavgADPdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_ADP+pKamg_ADP)/sqr(P_ADP);
    dmgADPdmg = (P_ADP*pow(10{dimensionless}, pKamg_ADP)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_ADP)/c0)/sqr(P_ADP);
    dmgADPdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_ADP+pKamg_ADP)*ln(10{dimensionless})/sqr(P_ADP);
    NH_ADP3 = 12{dimensionless};
    deltaGof_ADP3 = -1906.13{kilojoule_per_mole};
    deltaGpof_ADP3 = deltaGof_ADP3+NH_ADP3*R*T*ln(10{dimensionless})*pH_cy-IcorrdeltaGpof*(9{dimensionless}-NH_ADP3);
    deltaH1o_AMP = -3{kilojoule_per_mole};
    deltaHmgo_AMP = -7.5{kilojoule_per_mole};
    deltaH1_AMP = deltaH1o_AMP+Icorr*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    deltaHmg_AMP = deltaHmgo_AMP+Icorr*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}));
    pKa1_AMP = 6.29{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}))+TcorrpKa*deltaH1_AMP;
    pKamg_AMP = 1.92{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}))+TcorrpKa*deltaHmg_AMP;
    P_AMP = 1{dimensionless}+pow(10{dimensionless}, pKa1_AMP-pH_cy)+mg/c0*pow(10{dimensionless}, pKamg_AMP);
    AMP2 = 1{dimensionless}/P_AMP;
    HAMP1 = AMP2*pow(10{dimensionless}, pKa1_AMP-pH_cy);
    mgAMP = mg/c0*pow(10{dimensionless}, pKamg_AMP)*AMP2;
    Navg_AMP = 0{dimensionless}*AMP2+HAMP1+0{dimensionless}*mgAMP;
    dNavgAMPdH = pow(10{dimensionless}, pKa1_AMP)*(P_AMP-pow(10{dimensionless}, -pH_cy+pKa1_AMP))/(c0*sqr(P_AMP));
    dNavgAMPdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_AMP+pKamg_AMP)/sqr(P_AMP);
    dmgAMPdmg = (P_AMP*pow(10{dimensionless}, pKamg_AMP)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_AMP)/c0)/sqr(P_AMP);
    dmgAMPdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_AMP+pKamg_AMP)*ln(10{dimensionless})/sqr(P_AMP);
    NH_AMP2 = 12{dimensionless};
    deltaGof_AMP2 = -1040.45{kilojoule_per_mole};
    deltaGpof_AMP2 = deltaGof_AMP2+NH_AMP2*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_AMP2);
    pKak_PCR = 0.31{dimensionless};
    deltaH1o_PCR = 2.66{kilojoule_per_mole};
    deltaHmgo_PCR = 8.19{kilojoule_per_mole};
    deltaH1_PCR = deltaH1o_PCR+Icorr*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    deltaHmg_PCR = deltaHmgo_PCR+Icorr*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}));
    pKa1_PCR = 4.5{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}))+TcorrpKa*deltaH1_PCR;
    pKamg_PCR = 1.6{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}))+TcorrpKa*deltaHmg_PCR;
    P_PCR = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_PCR)+mg/c0*pow(10{dimensionless}, pKamg_PCR)+k/c0*pow(10{dimensionless}, pKak_PCR);
    HPCR = 1{dimensionless}/P_PCR;
    H2PCR = pow(10{dimensionless}, -pH_cy+pKa1_PCR)*HPCR;
    kPCR = k/c0*pow(10{dimensionless}, pKak_PCR)*HPCR;
    mgPCR = mg/c0*pow(10{dimensionless}, pKamg_PCR)*HPCR;
    Navg_PCR = H2PCR;
    dNavgPCRdH = pow(10{dimensionless}, pKa1_PCR)*(P_PCR-pow(10{dimensionless}, -pH_cy+pKa1_PCR))/(c0*sqr(P_PCR));
    dNavgPCRdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_PCR+pKamg_PCR)/sqr(P_PCR);
    dmgPCRdmg = (P_PCR*pow(10{dimensionless}, pKamg_PCR)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_PCR)/c0)/sqr(P_PCR);
    dmgPCRdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_PCR+pKamg_PCR)*ln(10{dimensionless})/sqr(P_PCR);
    NH_HPCR = 8{dimensionless};
    pKa1_CR = 2.3{dimensionless};
    P_CR = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_CR);
    HCR = 1{dimensionless}/P_CR;
    H2CR = HCR*pow(10{dimensionless}, -pH_cy+pKa1_CR);
    Navg_CR = 0{dimensionless}*HCR+1{dimensionless}*H2CR;
    dNavgCRdH = pow(10{dimensionless}, pKa1_CR)*(P_CR-pow(10{dimensionless}, -pH_cy+pKa1_CR))/(c0*sqr(P_CR));
    dNavgCRdmg = 0{per_molar};
    NH_HCR = 9{dimensionless};
    deltaH1o_G1P = -1.7{kilojoule_per_mole};
    deltaHmgo_G1P = -12{kilojoule_per_mole};
    deltaH1_G1P = deltaH1o_G1P+Icorr*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    deltaHmg_G1P = deltaHmgo_G1P+Icorr*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}));
    pKa1_G1P = 6.09{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}))+TcorrpKa*deltaH1_G1P;
    pKamg_G1P = 2.48{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}))+TcorrpKa*deltaHmg_G1P;
    P_G1P = 1{dimensionless}+pow(10{dimensionless}, -pH_cy)*pow(10{dimensionless}, pKa1_G1P)+mg/c0*pow(10{dimensionless}, pKamg_G1P);
    UG1P = 1{dimensionless}/P_G1P;
    HG1P = UG1P*pow(10{dimensionless}, -pH_cy+pKa1_G1P);
    mgG1P = UG1P*mg/c0*pow(10{dimensionless}, pKamg_G1P);
    Navg_G1P = HG1P;
    dNavgG1PdH = pow(10{dimensionless}, pKa1_G1P)*(P_G1P-pow(10{dimensionless}, -pH_cy+pKa1_G1P))/(c0*sqr(P_G1P));
    dNavgG1Pdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_G1P+pKamg_G1P)/sqr(P_G1P);
    dmgG1Pdmg = (P_G1P*pow(10{dimensionless}, pKamg_G1P)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_G1P)/c0)/sqr(P_G1P);
    dmgG1PdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_G1P+pKamg_G1P)*ln(10{dimensionless})/sqr(P_G1P);
    NH_UG1P = 11{dimensionless};
    deltaGof_UG1P = -1756.87{kilojoule_per_mole};
    deltaGpof_UG1P = deltaGof_UG1P+NH_UG1P*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UG1P);
    pKa1_G6P = 6.11{dimensionless};
    P_G6P = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_G6P);
    UG6P = 1{dimensionless}/P_G6P;
    HG6P = UG6P*pow(10{dimensionless}, -pH_cy+pKa1_G6P);
    Navg_G6P = HG6P;
    dNavgG6PdH = pow(10{dimensionless}, pKa1_G6P)*(P_G6P-pow(10{dimensionless}, -pH_cy+pKa1_G6P))/(c0*sqr(P_G6P));
    dNavgG6Pdmg = 0{per_molar};
    NH_UG6P = 11{dimensionless};
    deltaGof_UG6P = -1763.94{kilojoule_per_mole};
    deltaGpof_UG6P = deltaGof_UG6P+NH_UG6P*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UG6P);
    pKa1_F6P = 5.89{dimensionless};
    P_F6P = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_F6P);
    UF6P = 1{dimensionless}/P_F6P;
    HF6P = UF6P*pow(10{dimensionless}, -pH_cy+pKa1_F6P);
    Navg_F6P = HF6P;
    dNavgF6PdH = pow(10{dimensionless}, pKa1_F6P)*(P_F6P-pow(10{dimensionless}, -pH_cy+pKa1_F6P))/(c0*sqr(P_F6P));
    dNavgF6Pdmg = 0{per_molar};
    NH_UF6P = 11{dimensionless};
    deltaGof_UF6P = -1760.8{kilojoule_per_mole};
    deltaGpof_UF6P = deltaGof_UF6P+NH_UF6P*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UF6P);
    pKa1_FDP = 6.4{dimensionless};
    pKa2_FDP = 5.92{dimensionless};
    pKamg_FDP = 2.7{dimensionless};
    P_FDP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_FDP)+pow(10{dimensionless}, -2{dimensionless}*pH_cy+pKa1_FDP+pKa2_FDP)+mg/c0*pow(10{dimensionless}, pKamg_FDP);
    UFDP = 1{dimensionless}/P_FDP;
    HFDP = UFDP*pow(10{dimensionless}, -pH_cy+pKa1_FDP);
    H2FDP = UFDP*pow(10{dimensionless}, -2{dimensionless}*pH_cy+pKa1_FDP+pKa2_FDP);
    mgFDP = UFDP*mg/c0*pow(10{dimensionless}, pKamg_FDP);
    Navg_FDP = HFDP+2{dimensionless}*H2FDP;
    dNavgFDPdH = (P_FDP*(pow(10{dimensionless}, pKa1_FDP)+2{dimensionless}*pow(10{dimensionless}, -pH_cy+pKa1_FDP+pKa2_FDP))-(pow(10{dimensionless}, -pH_cy+pKa1_FDP)+2{dimensionless}*pow(10{dimensionless}, -2{dimensionless}*pH_cy+pKa1_FDP+pKa2_FDP))*(pow(10{dimensionless}, pKa1_FDP)+2{dimensionless}*pow(10{dimensionless}, -pH_cy+pKa1_FDP+pKa2_FDP)))/(c0*sqr(P_FDP));
    dNavgFDPdmg = -(pow(10{dimensionless}, -pH_cy+pKa1_FDP)+2{dimensionless}*pow(10{dimensionless}, -2{dimensionless}*pH_cy+pKa1_FDP+pKa2_FDP))*pow(10{dimensionless}, pKamg_FDP)/(c0*sqr(P_FDP));
    dmgFDPdmg = (P_FDP*pow(10{dimensionless}, pKamg_FDP)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_FDP)/c0)/sqr(P_FDP);
    dmgFDPdpH = mg/c0*pow(10{dimensionless}, pKamg_FDP)*(P_FDP*pow(10{dimensionless}, -pH_cy+pKa1_FDP)*ln(10{dimensionless})-pow(10{dimensionless}, -2{dimensionless}*pH_cy+pKa1_FDP+pKa2_FDP)*2{dimensionless}*ln(10{dimensionless}))/sqr(P_FDP);
    NH_UFDP = 10{dimensionless};
    deltaGof_UFDP = -2601.4{kilojoule_per_mole};
    deltaGpof_UFDP = deltaGof_UFDP+NH_UFDP*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(16{dimensionless}-NH_UFDP);
    pKa1_GAP = 6.45{dimensionless};
    P_GAP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_GAP);
    UGAP = 1{dimensionless}/P_GAP;
    HGAP = UGAP*pow(10{dimensionless}, -pH_cy+pKa1_GAP);
    Navg_GAP = HGAP;
    dNavgGAPdH = pow(10{dimensionless}, pKa1_GAP)*(P_GAP-pow(10{dimensionless}, -pH_cy+pKa1_GAP))/(c0*sqr(P_GAP));
    dNavgGAPdmg = 0{per_molar};
    NH_UGAP = 5{dimensionless};
    deltaGof_UGAP = -1288.6{kilojoule_per_mole};
    deltaGpof_UGAP = deltaGof_UGAP+NH_UGAP*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UGAP);
    pKamg_G3P = 1.63{dimensionless};
    deltaH1o_G3P = -3.1{kilojoule_per_mole};
    deltaH1_G3P = deltaH1o_G3P+Icorr*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    pKa1_G3P = 6.22{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}))+TcorrpKa*deltaH1_G3P;
    P_G3P = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_G3P)+mg/c0*pow(10{dimensionless}, pKamg_G3P);
    UG3P = 1{dimensionless}/P_G3P;
    HG3P = UG3P*pow(10{dimensionless}, -pH_cy+pKa1_G3P);
    mgG3P = UG3P*mg/c0*pow(10{dimensionless}, pKamg_G3P);
    Navg_G3P = HG3P;
    dNavgG3PdH = pow(10{dimensionless}, pKa1_G3P)*(P_G3P-pow(10{dimensionless}, -pH_cy+pKa1_G3P))/(c0*sqr(P_G3P));
    dNavgG3Pdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_G3P+pKamg_G3P)/sqr(P_G3P);
    dmgG3Pdmg = (P_G3P*pow(10{dimensionless}, pKamg_G3P)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_G3P)/c0)/sqr(P_G3P);
    dmgG3PdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_G3P+pKamg_G3P)*ln(10{dimensionless})/sqr(P_G3P);
    NH_UG3P = 7{dimensionless};
    deltaGof_UG3P = -1339.25{kilojoule_per_mole};
    deltaGpof_UG3P = deltaGof_UG3P+NH_UG3P*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UG3P);
    pKa1_DHAP = 5.9{dimensionless};
    pKamg_DHAP = 1.57{dimensionless};
    P_DHAP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_DHAP)+mg/c0*pow(10{dimensionless}, pKamg_DHAP);
    UDHAP = 1{dimensionless}/P_DHAP;
    HDHAP = UDHAP*pow(10{dimensionless}, -pH_cy+pKa1_DHAP);
    mgDHAP = UDHAP*mg/c0*pow(10{dimensionless}, pKamg_DHAP);
    Navg_DHAP = HDHAP;
    dNavgDHAPdH = pow(10{dimensionless}, pKa1_DHAP)*(P_DHAP-pow(10{dimensionless}, -pH_cy+pKa1_DHAP))/(c0*sqr(P_DHAP));
    dNavgDHAPdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_DHAP+pKamg_DHAP)/sqr(P_DHAP);
    dmgDHAPdmg = (P_DHAP*pow(10{dimensionless}, pKamg_DHAP)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_DHAP)/c0)/sqr(P_DHAP);
    dmgDHAPdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_DHAP+pKamg_DHAP)*ln(10{dimensionless})/sqr(P_DHAP);
    NH_UDHAP = 5{dimensionless};
    deltaGof_UDHAP = -1296.26{kilojoule_per_mole};
    deltaGpof_UDHAP = deltaGof_UDHAP+NH_UDHAP*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UDHAP);
    pKa1_13DPG = 7.5{dimensionless};
    P_13DPG = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_13DPG);
    U13DPG = 1{dimensionless}/P_13DPG;
    H13DPG = U13DPG*pow(10{dimensionless}, -pH_cy+pKa1_13DPG);
    Navg_13DPG = H13DPG;
    dNavg13DPGdH = pow(10{dimensionless}, pKa1_13DPG)*(P_13DPG-pow(10{dimensionless}, -pH_cy+pKa1_13DPG))/(c0*sqr(P_13DPG));
    dNavg13DPGdmg = 0{per_molar};
    NH_U13DPG = 4{dimensionless};
    deltaGof_U13DPG = -2356.14{kilojoule_per_mole};
    deltaGpof_U13DPG = deltaGof_U13DPG+NH_U13DPG*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(16{dimensionless}-NH_U13DPG);
    pKa1_3PG = 6.21{dimensionless};
    P_3PG = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+6.21{dimensionless});
    U3PG = 1{dimensionless}/P_3PG;
    H3PG = U3PG*pow(10{dimensionless}, -pH_cy+6.21{dimensionless});
    Navg_3PG = H3PG;
    dNavg3PGdH = pow(10{dimensionless}, pKa1_3PG)*(P_3PG-pow(10{dimensionless}, -pH_cy+pKa1_3PG))/(c0*sqr(P_3PG));
    dNavg3PGdmg = 0{per_molar};
    NH_U3PG = 4{dimensionless};
    deltaGof_U3PG = -1502.54{kilojoule_per_mole};
    deltaGpof_U3PG = deltaGof_U3PG+NH_U3PG*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(9{dimensionless}-NH_U3PG);
    pKa1_2PG = 7{dimensionless};
    pKamg_2PG = 2.45{dimensionless};
    pKak_2PG = 1.18{dimensionless};
    P_2PG = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_2PG)+mg/c0*pow(10{dimensionless}, pKamg_2PG)+k/c0*pow(10{dimensionless}, pKak_2PG);
    U2PG = 1{dimensionless}/P_2PG;
    H2PG = U2PG*pow(10{dimensionless}, -pH_cy+pKa1_2PG);
    mg2PG = U2PG*mg/c0*pow(10{dimensionless}, pKamg_2PG);
    k2PG = U2PG*k/c0*pow(10{dimensionless}, pKak_2PG);
    Navg_2PG = H2PG;
    dNavg2PGdH = pow(10{dimensionless}, pKa1_2PG)*(P_2PG-pow(10{dimensionless}, -pH_cy+pKa1_2PG))/(c0*sqr(P_2PG));
    dNavg2PGdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_2PG+pKamg_2PG)/sqr(P_2PG);
    dmg2PGdmg = (P_2PG*pow(10{dimensionless}, pKamg_2PG)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_2PG)/c0)/sqr(P_2PG);
    dmg2PGdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_2PG+pKamg_2PG)*ln(10{dimensionless})/sqr(P_2PG);
    NH_U2PG = 4{dimensionless};
    deltaGof_U2PG = -1496.38{kilojoule_per_mole};
    deltaGpof_U2PG = deltaGof_U2PG+NH_U2PG*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(9{dimensionless}-NH_U2PG);
    pKa1_PEP = 6.35{dimensionless};
    pKamg_PEP = 2.26{dimensionless};
    pKak_PEP = 1.08{dimensionless};
    P_PEP = 1{dimensionless}+pow(10{dimensionless}, pKa1_PEP-pH_cy)+mg/c0*pow(10{dimensionless}, pKamg_PEP)+k/c0*pow(10{dimensionless}, pKak_PEP);
    UPEP = 1{dimensionless}/P_PEP;
    HPEP = UPEP*pow(10{dimensionless}, pKa1_PEP-pH_cy);
    kPEP = UPEP*k/c0*pow(10{dimensionless}, pKak_PEP);
    mgPEP = UPEP*mg/c0*pow(10{dimensionless}, pKamg_PEP);
    Navg_PEP = HPEP;
    dNavgPEPdH = pow(10{dimensionless}, pKa1_PEP)*(P_PEP-pow(10{dimensionless}, -pH_cy+pKa1_PEP))/(c0*sqr(P_PEP));
    dNavgPEPdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_PEP+pKamg_PEP)/sqr(P_PEP);
    dmgPEPdmg = (P_PEP*pow(10{dimensionless}, pKamg_PEP)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_PEP)/c0)/sqr(P_PEP);
    dmgPEPdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_PEP+pKamg_PEP)*ln(10{dimensionless})/sqr(P_PEP);
    NH_UPEP = 2{dimensionless};
    deltaGof_UPEP = -1263.65{kilojoule_per_mole};
    deltaGpof_UPEP = deltaGof_UPEP+NH_UPEP*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(9{dimensionless}-NH_UPEP);
    pKa1_PYR = 2.49{dimensionless};
    P_PYR = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_PYR);
    UPYR = 1{dimensionless}/P_PYR;
    HPYR = UPYR*pow(10{dimensionless}, -pH_cy+pKa1_PYR);
    Navg_PYR = HPYR;
    dNavgPYRdH = pow(10{dimensionless}, pKa1_PYR)*(P_PYR-pow(10{dimensionless}, -pH_cy+pKa1_PYR))/(c0*sqr(P_PYR));
    dNavgPYRdmg = 0{per_molar};
    NH_UPYR = 3{dimensionless};
    deltaGof_UPYR = -472.27{kilojoule_per_mole};
    deltaGpof_UPYR = deltaGof_UPYR+NH_UPYR*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(1{dimensionless}-NH_UPYR);
    pKamg_LAC = 0.98{dimensionless};
    deltaH1o_LAC = -0.33{kilojoule_per_mole};
    deltaH1_LAC = deltaH1o_LAC+Icorr*(sqr(1{dimensionless})+sqr(1{dimensionless})-sqr(0{dimensionless}));
    pKa1_LAC = 3.67{dimensionless}+IcorrpKa/1{kilojoule_per_mole}*(sqr(1{dimensionless})+sqr(1{dimensionless})-sqr(0{dimensionless}))+TcorrpKa*deltaH1_LAC;
    P_LAC = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_LAC)+mg/c0*pow(10{dimensionless}, pKamg_LAC);
    ULAC = 1{dimensionless}/P_LAC;
    HLAC = ULAC*pow(10{dimensionless}, -pH_cy+pKa1_LAC);
    mgLAC = mg/c0*pow(10{dimensionless}, pKamg_LAC)*ULAC;
    Navg_LAC = HLAC;
    dNavgLACdH = pow(10{dimensionless}, pKa1_LAC)*(P_LAC-pow(10{dimensionless}, -pH_cy+pKa1_LAC))/(c0*sqr(P_LAC));
    dNavgLACdmg = -pow(10{dimensionless}, -pH_cy)/c0*pow(10{dimensionless}, pKa1_LAC+pKamg_LAC)/sqr(P_LAC);
    dmgLACdmg = (P_LAC*pow(10{dimensionless}, pKamg_LAC)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_LAC)/c0)/sqr(P_LAC);
    dmgLACdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_LAC+pKamg_LAC)*ln(10{dimensionless})/sqr(P_LAC);
    NH_ULAC = 5{dimensionless};
    deltaGof_ULAC = -516.72{kilojoule_per_mole};
    deltaGpof_ULAC = deltaGof_ULAC+NH_ULAC*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(1{dimensionless}-NH_ULAC);
    dNH_GLY = -10{dimensionless};
    deltaGpo_GLY = 655.7{kilojoule_per_mole}+dNH_GLY*ln(10{dimensionless})*R*T*pH_cy;
    NH_NAD = 26{dimensionless};
    deltaGof_NAD = 0{kilojoule_per_mole};
    deltaGpof_NAD = deltaGof_NAD+NH_NAD*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(1{dimensionless}-NH_NAD);
    NH_NADH = 27{dimensionless};
    deltaGof_NADH = 22.65{kilojoule_per_mole};
    deltaGpof_NADH = deltaGof_NADH+NH_NADH*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_NADH);
    NH_H2O = 2{dimensionless};
    deltaGof_H2O = -237.19{kilojoule_per_mole};
    deltaGpof_H2O = deltaGof_H2O+NH_H2O*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(0{dimensionless}-NH_H2O);
    NH_H = 1{dimensionless};
    deltaGof_H = 0{kilojoule_per_mole};
    deltaGpof_H = deltaGof_H+NH_H*ln(10{dimensionless})*R*T*pH_cy;
    deltaH_CK = Navg_ATP+Navg_CR-Navg_PCR-Navg_ADP+NH_ATP4+NH_HCR-NH_HPCR-NH_ADP3;
    Kref_CK = 2.58e8{dimensionless};
    deltaHo_CKo = -17.55{kilojoule_per_mole};
    deltaH1_CK = deltaHo_CKo+Icorr*(sqr(2{dimensionless})+sqr(3{dimensionless})+sqr(1{dimensionless})-sqr(4{dimensionless})-sqr(0{dimensionless}));
    Kref_CKI = exp(ln(Kref_CK)+alphadebye*sqrt(I)*(sqr(2{dimensionless})+sqr(3{dimensionless})+sqr(1{dimensionless})-sqr(4{dimensionless})-sqr(0{dimensionless}))/(1{dimensionless}+B*sqrt(I)));
    Kref_CKT = pow(10{dimensionless}, log(Kref_CKI)-TcorrpKa*deltaH1_CK);
    deltaGpo_CK = -R*T*ln(Kref_CKT);
    Kapp_CK = exp(-deltaGpo_CK/(R*T))*pow(10{dimensionless}, -pH_cy)*P_ATP*P_CR/(P_PCR*P_ADP);
    deltaH_ADK = 2{dimensionless}*Navg_ADP-Navg_ATP-Navg_AMP+2{dimensionless}*NH_ADP3-NH_ATP4-NH_AMP2;
    deltaGpo_ADK = 2{dimensionless}*deltaGpof_ADP3-deltaGpof_ATP4-deltaGpof_AMP2;
    Kapp_ADK = exp(-deltaGpo_ADK/(R*T))*sqr(P_ADP)/(P_ATP*P_AMP);
    deltaH_GP = Navg_G1P-Navg_Pi+1{dimensionless}-NH_HPi2;
    deltaGpo_GP = deltaGpo_GLY+deltaGpof_UG1P-deltaGpof_HPi2;
    Kapp_GP = exp(-deltaGpo_GP/(R*T))*P_G1P/P_Pi;
    deltaH_PGLM = Navg_G6P-Navg_G1P+NH_UG6P-NH_UG1P;
    deltaGpo_PGLM = deltaGpof_UG6P-deltaGpof_UG1P;
    Kapp_PGLM = exp(-deltaGpo_PGLM/(R*T))*P_G6P/P_G1P;
    deltaH_PGI = Navg_F6P-Navg_G6P+NH_UF6P-NH_UG6P;
    deltaGpo_PGI = deltaGpof_UF6P-deltaGpof_UG6P;
    Kapp_PGI = exp(-deltaGpo_PGI/(R*T))*P_F6P/P_G6P;
    deltaH_PFK = Navg_ADP+Navg_FDP-Navg_F6P-Navg_ATP+NH_ADP3+NH_UFDP-NH_UF6P-NH_ATP4;
    deltaGpo_PFK = deltaGpof_UFDP+deltaGpof_ADP3+deltaGpof_H-deltaGpof_UF6P-deltaGpof_ATP4;
    Kapp_PFK = exp(-deltaGpo_PFK/(R*T))*P_FDP*P_ADP/(P_F6P*P_ATP*pow(10{dimensionless}, -pH_cy));
    deltaH_ALD = Navg_DHAP+Navg_GAP-Navg_FDP+NH_UDHAP+NH_UGAP-NH_UFDP;
    deltaGpo_ALD = deltaGpof_UDHAP+deltaGpof_UGAP-deltaGpof_UFDP;
    Kapp_ALD = 1{molar}*exp(-deltaGpo_ALD/(R*T))*P_GAP*P_FDP/P_DHAP;
    deltaH_TPI = Navg_DHAP-Navg_GAP+NH_UDHAP-NH_UGAP;
    deltaGpo_TPI = deltaGpof_UDHAP-deltaGpof_UGAP;
    Kapp_TPI = exp(-deltaGpo_TPI/(R*T))*P_DHAP/P_GAP;
    deltaH_GAPDH = Navg_13DPG-Navg_GAP-Navg_Pi+NH_U13DPG+NH_NADH-NH_UGAP-NH_HPi2-NH_NAD;
    deltaGpo_GAPDH = deltaGpof_U13DPG+deltaGpof_NADH+deltaGpof_H-deltaGpof_HPi2-deltaGpof_UGAP-deltaGpof_NAD;
    Kapp_GAPDH = exp(-deltaGpo_GAPDH/(R*T))*P_13DPG/(P_Pi*P_GAP*pow(10{dimensionless}, -pH_cy)*1{molar});
    deltaH_G3PDH = Navg_DHAP-Navg_G3P+NH_UDHAP+NH_NADH-NH_NAD-NH_UG3P;
    deltaGpo_G3PDH = deltaGpof_H+deltaGpof_NADH+deltaGpof_UDHAP-deltaGpof_NAD-deltaGpof_UG3P;
    Kapp_G3PDH = exp(-deltaGpo_G3PDH/(R*T))*P_DHAP/(P_G3P*pow(10{dimensionless}, -pH_cy));
    deltaH_PGK = Navg_3PG+Navg_ATP-Navg_13DPG-Navg_ADP+NH_U3PG+NH_ATP4-NH_U13DPG-NH_ADP3;
    deltaGpo_PGK = deltaGpof_ATP4+deltaGpof_U3PG-deltaGpof_U13DPG-deltaGpof_ADP3;
    Kapp_PGK = exp(-deltaGpo_PGK/(R*T))*P_ATP*P_3PG/(P_13DPG*P_ADP);
    deltaH_PGM = Navg_2PG-Navg_3PG+NH_U2PG-NH_U3PG;
    deltaGpo_PGM = deltaGpof_U2PG-deltaGpof_U3PG;
    Kapp_PGM = exp(-deltaGpo_PGM/(R*T))*P_2PG/P_3PG;
    deltaH_ENOL = Navg_PEP-Navg_2PG+NH_H2O+NH_UPEP-NH_U2PG;
    deltaGpo_ENOL = deltaGpof_H2O+deltaGpof_UPEP-deltaGpof_U2PG;
    Kapp_ENOL = exp(-deltaGpo_ENOL/(R*T))*P_PEP/P_2PG;
    deltaH_PK = Navg_PYR+Navg_ATP-Navg_PEP-Navg_ADP+NH_UPYR+NH_ATP4-NH_UPEP-NH_ADP3;
    deltaGpo_PK = deltaGpof_UPYR+deltaGpof_ATP4-deltaGpof_H-deltaGpof_UPEP-deltaGpof_ADP3;
    Kapp_PK = exp(-deltaGpo_PK/(R*T))*P_PYR*P_ATP*pow(10{dimensionless}, -pH_cy)/(P_PEP*P_ADP);
    deltaH_LDH = Navg_LAC-Navg_PYR+NH_ULAC+NH_NAD-NH_UPYR-NH_NADH;
    deltaGpo_LDH = deltaGpof_ULAC+deltaGpof_NAD-deltaGpof_UPYR-deltaGpof_NADH-deltaGpof_H;
    Kapp_LDH = exp(-deltaGpo_LDH/(R*T))*P_LAC*pow(10{dimensionless}, -pH_cy)/P_PYR;
    deltaH_ATPase = Navg_ADP+Navg_Pi-Navg_ATP+NH_ADP3+NH_HPi2-NH_ATP4-NH_H2O;
    deltaGpo_ATPase = deltaGpof_ADP3+deltaGpof_HPi2+deltaGpof_H-deltaGpof_H2O-deltaGpof_ATP4;
    Kapp_ATPase = exp(-deltaGpo_ATPase/(R*T))*P_ADP*P_Pi/(P_ATP*pow(10{dimensionless}, -pH_cy));
  enddef;

  def comp glycogen_phosphorylase as
    var Vfgly: molar_per_minute {pub: out};
    var expno: dimensionless {pub: out};
    var fracA: dimensionless {pub: out};
    var KgpA_glyf: molar;
    var KgpA_pi: molar;
    var KgpA_igly: molar;
    var KgpA_ipi: molar;
    var KgpA_glyb: molar;
    var KgpA_g1p: molar;
    var KgpA_ig1p: molar;
    var Dglya: dimensionless;
    var pa: dimensionless;
    var VbglyA: molar_per_minute;
    var glyAF: per_minute;
    var glyAR: per_minute;
    var flux_GPa: molar_per_minute {pub: out};
    var time: minute {pub: in};
    var G1P: molar {pub: in};
    var Pi: molar {pub: in};
    var Gly: molar {pub: in};
    var pH_cy: dimensionless {pub: in};
    var Kapp_GP: dimensionless {pub: in};
    var Par_1: molar_per_minute {pub: in};
    var Par_2: dimensionless {pub: in};
    var Par_3: molar {pub: in};
    var Par_4: molar {pub: in};
    var Par_5: molar {pub: in};
    var Par_6: molar {pub: in};
    var Par_7: molar {pub: in};
    var Par_8: molar {pub: in};
    var Par_9: molar {pub: in};
    var Par_100: dimensionless {pub: in};
    Vfgly = Par_1;
    expno = Par_100;
    fracA = sel
      case expno <> 45{dimensionless}:
        Par_2;
      case time < 40{minute}:
        0.001{dimensionless};
      case (time >= 40{minute}) and (time < 80{minute}):
        0.004{dimensionless};
      case (time >= 80{minute}) and (time < 100{minute}):
        0.01{dimensionless};
      case time >= 100{minute}:
        0.04{dimensionless};
    endsel;
    KgpA_glyf = Par_3;
    KgpA_pi = Par_4;
    KgpA_igly = Par_5;
    KgpA_ipi = Par_6;
    KgpA_glyb = Par_7;
    KgpA_g1p = Par_8;
    KgpA_ig1p = Par_9;
    Dglya = 1{dimensionless}+Gly/KgpA_glyf+Pi/KgpA_pi+Gly*Pi/(KgpA_glyf*KgpA_ipi)+Gly/KgpA_glyb+G1P/KgpA_g1p+Gly*G1P/(KgpA_ig1p*KgpA_glyb);
    pa = 1.404{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, 5.94{dimensionless}-pH_cy)+pow(10{dimensionless}, pH_cy-7.29{dimensionless}));
    VbglyA = pa*Vfgly*KgpA_glyb*KgpA_ig1p/(KgpA_igly*KgpA_pi*Kapp_GP);
    glyAF = pa*Vfgly*Pi/(KgpA_igly*KgpA_pi)/Dglya;
    glyAR = VbglyA*Gly/(KgpA_glyb*KgpA_ig1p)/Dglya;
    flux_GPa = fracA*(Gly*glyAF-G1P*glyAR);
  enddef;

  def comp glycogen_phosphorylase_B as
    var fracB: dimensionless;
    var KgpB_pi: molar;
    var KgpB_ipi: molar;
    var KgpB_iglyf: molar;
    var KgpB_g1p: molar;
    var KgpB_ig1p: molar;
    var KgpB_iglyb: molar;
    var Kgp_amp: molar;
    var interactioncoeff: dimensionless;
    var nH: dimensionless;
    var M: dimensionless;
    var Dglyb: dimensionless;
    var pb: dimensionless;
    var VbglyB: molar_per_minute;
    var glyBF: per_minute;
    var glyBR: per_minute;
    var flux_GPb: molar_per_minute {pub: out};
    var fracA: dimensionless {pub: in};
    var Vfgly: molar_per_minute {pub: in};
    var AMP: molar {pub: in};
    var G1P: molar {pub: in};
    var Gly: molar {pub: in};
    var Pi: molar {pub: in};
    var Kapp_GP: dimensionless {pub: in};
    var pH_cy: dimensionless {pub: in};
    var Par_10: molar {pub: in};
    var Par_11: molar {pub: in};
    var Par_12: molar {pub: in};
    var Par_13: molar {pub: in};
    var Par_14: molar {pub: in};
    var Par_15: molar {pub: in};
    var Par_16: molar {pub: in};
    var Par_17: dimensionless {pub: in};
    var Par_18: dimensionless {pub: in};
    fracB = 1{dimensionless}-fracA;
    KgpB_pi = Par_10;
    KgpB_ipi = Par_11;
    KgpB_iglyf = Par_12;
    KgpB_g1p = Par_13;
    KgpB_ig1p = Par_14;
    KgpB_iglyb = Par_15;
    Kgp_amp = Par_16;
    interactioncoeff = Par_17;
    nH = Par_18;
    M = pow(AMP/Kgp_amp, nH)/interactioncoeff/(1{dimensionless}+pow(AMP/Kgp_amp, nH)/interactioncoeff);
    Dglyb = 1{dimensionless}+Gly/KgpB_iglyf+Pi/KgpB_ipi+Gly/KgpB_iglyb+G1P/KgpB_ig1p+Gly*Pi/(KgpB_iglyf*KgpB_pi)+Gly*G1P/(KgpB_g1p*KgpB_iglyb);
    pb = 1.75{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, 6.12{dimensionless}-pH_cy)+pow(10{dimensionless}, pH_cy-7.03{dimensionless}));
    VbglyB = pb*Vfgly*KgpB_g1p*KgpB_iglyb/(KgpB_iglyf*KgpB_pi*Kapp_GP);
    glyBF = pb*M*Vfgly*Pi/(KgpB_iglyf*KgpB_pi)/Dglyb;
    glyBR = M*VbglyB*Gly/(KgpB_g1p*KgpB_iglyb)/Dglyb;
    flux_GPb = fracB*(Gly*glyBF-G1P*glyBR);
  enddef;

  def comp PGLM as
    var Vffpglm: molar_per_minute;
    var Kpglm_g1p: molar;
    var Kpglm_g6p: molar;
    var Vfpglm: molar_per_minute;
    var Vbpglm: molar_per_minute;
    var v_PGLM: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Kapp_PGLM: dimensionless {pub: in};
    var G1P: molar {pub: in};
    var G6P: molar {pub: in};
    var Par_19: molar_per_minute {pub: in};
    var Par_20: molar {pub: in};
    var Par_21: molar {pub: in};
    Vffpglm = Par_19;
    Kpglm_g1p = Par_20;
    Kpglm_g6p = Par_21;
    Vfpglm = Vffpglm*1.329{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+6.64{dimensionless})+pow(10{dimensionless}, pH_cy-8.36{dimensionless}));
    Vbpglm = Vfpglm*Kpglm_g6p/(Kpglm_g1p*Kapp_PGLM);
    v_PGLM = (Vfpglm*G1P/Kpglm_g1p-Vbpglm*G6P/Kpglm_g6p)/(1{dimensionless}+G1P/Kpglm_g1p+G6P/Kpglm_g6p);
  enddef;

  def comp PGI as
    var Vbbpgi: molar_per_minute;
    var Kpgi_g6p: molar;
    var Kpgi_f6p: molar;
    var Vbpgi: molar_per_minute;
    var Vfpgi: molar_per_minute;
    var v_PGI: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Kapp_PGI: dimensionless {pub: in};
    var F6P: molar {pub: in};
    var G6P: molar {pub: in};
    var Par_22: molar_per_minute {pub: in};
    var Par_23: molar {pub: in};
    var Par_24: molar {pub: in};
    Vbbpgi = Par_22;
    Kpgi_g6p = Par_23;
    Kpgi_f6p = Par_24;
    Vbpgi = Vbbpgi/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+6.94{dimensionless})+pow(10{dimensionless}, pH_cy-9.35{dimensionless}));
    Vfpgi = Vbpgi*Kpgi_g6p/Kpgi_f6p*Kapp_PGI;
    v_PGI = (Vfpgi*G6P/Kpgi_g6p-Vbpgi*F6P/Kpgi_f6p)/(1{dimensionless}+F6P/Kpgi_f6p+G6P/Kpgi_g6p);
  enddef;

  def comp PFK as
    var Vffpfk: molar_per_minute;
    var Kpfk_f6p: molar;
    var Kpfk_f6pT: molar;
    var Kpfk_atp: molar;
    var Kpfk_atpT: molar;
    var Kpfk_fbp: molar;
    var Kpfk_fbpT: molar;
    var Kpfk_adp: molar;
    var Kpfk_adpT: molar;
    var Kpfki: molar;
    var Kmpfk: molar;
    var d: dimensionless;
    var e_: dimensionless;
    var Lo: dimensionless;
    var Vfpfk: molar_per_minute;
    var Vbpfk: molar_per_minute;
    var L: dimensionless;
    var alpha: dimensionless;
    var Delta: dimensionless;
    var Deltap: dimensionless;
    var v_PFK: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Kapp_PFK: dimensionless {pub: in};
    var F6P: molar {pub: in};
    var FBP: molar {pub: in};
    var AMP: molar {pub: in};
    var ADP: molar {pub: in};
    var ATP: molar {pub: in};
    var Par_25: molar_per_minute {pub: in};
    var Par_26: molar {pub: in};
    var Par_27: molar {pub: in};
    var Par_28: molar {pub: in};
    var Par_29: molar {pub: in};
    var Par_30: molar {pub: in};
    var Par_31: molar {pub: in};
    var Par_32: molar {pub: in};
    var Par_33: molar {pub: in};
    var Par_34: molar {pub: in};
    var Par_35: molar {pub: in};
    var Par_36: dimensionless {pub: in};
    var Par_37: dimensionless {pub: in};
    var Par_38: dimensionless {pub: in};
    Vffpfk = Par_25;
    Kpfk_f6p = Par_26;
    Kpfk_f6pT = Par_27;
    Kpfk_atp = Par_28;
    Kpfk_atpT = Par_29;
    Kpfk_fbp = Par_30;
    Kpfk_fbpT = Par_31;
    Kpfk_adp = Par_32;
    Kpfk_adpT = Par_33;
    Kpfki = Par_34;
    Kmpfk = Par_35;
    d = Par_36;
    e_ = Par_37;
    Lo = Par_38;
    Vfpfk = Vffpfk/(1{dimensionless}+pow(pH_cy/6.8{dimensionless}, -30{dimensionless}));
    Vbpfk = Vfpfk*Kpfk_fbp*Kpfk_adp/(Kpfk_f6p*Kpfk_atp*Kapp_PFK);
    L = Lo*pow((1{dimensionless}+ATP/Kpfki)/(1{dimensionless}+d*ATP/Kpfki)*(1{dimensionless}+e_*AMP/Kmpfk)/(1{dimensionless}+AMP/Kmpfk), 4{dimensionless});
    alpha = Kpfk_f6p*Kpfk_atp/(Kpfk_f6pT*Kpfk_atpT);
    Delta = (1{dimensionless}+F6P/Kpfk_f6p)*(1{dimensionless}+ATP/Kpfk_atp)+FBP/Kpfk_fbp+ADP/Kpfk_adp*(1{dimensionless}+FBP/Kpfk_fbp);
    Deltap = (1{dimensionless}+F6P/Kpfk_f6pT)*(1{dimensionless}+ATP/Kpfk_atpT)+FBP/Kpfk_fbpT+ADP/Kpfk_adpT*(1{dimensionless}+FBP/Kpfk_fbpT);
    v_PFK = (Vfpfk*F6P*ATP/(Kpfk_f6p*Kpfk_atp)/Delta-Vbpfk*ADP*FBP/(Kpfk_adp*Kpfk_fbp)/Delta)*(1{dimensionless}+alpha*L*pow(Deltap/Delta, 3{dimensionless}))/(1{dimensionless}+L*pow(Deltap/Delta, 4{dimensionless}));
  enddef;

  def comp ALD as
    var Vffald: molar_per_minute;
    var Kald_fbp: molar;
    var Kald_dhap: molar;
    var Kald_gap: molar;
    var Vfald: molar_per_minute;
    var Vbald: molar_per_minute;
    var v_ALD: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Kapp_ALD: molar {pub: in};
    var DHAP: molar {pub: in};
    var FBP: molar {pub: in};
    var GAP: molar {pub: in};
    var Par_39: molar_per_minute {pub: in};
    var Par_40: molar {pub: in};
    var Par_41: molar {pub: in};
    var Par_42: molar {pub: in};
    Vffald = Par_39;
    Kald_fbp = Par_40;
    Kald_dhap = Par_41;
    Kald_gap = Par_42;
    Vfald = Vffald*1.013{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+5.32{dimensionless})+pow(10{dimensionless}, pH_cy-9.15{dimensionless}));
    Vbald = Vfald*Kald_gap*Kald_dhap/(Kald_fbp*Kapp_ALD);
    v_ALD = (Vfald*FBP/Kald_fbp-Vbald*GAP*DHAP/(Kald_gap*Kald_dhap))/(1{dimensionless}+FBP/Kald_fbp+GAP/Kald_gap+DHAP/Kald_dhap);
  enddef;

  def comp TPI as
    var Vfftpi: molar_per_minute;
    var Ktpi_gap: molar;
    var Ktpi_dhap: molar;
    var Vftpi: molar_per_minute;
    var Vbtpi: molar_per_minute;
    var v_TPI: molar_per_minute {pub: out};
    var Kapp_TPI: dimensionless {pub: in};
    var DHAP: molar {pub: in};
    var GAP: molar {pub: in};
    var Par_43: molar_per_minute {pub: in};
    var Par_44: molar {pub: in};
    var Par_45: molar {pub: in};
    Vfftpi = Par_43;
    Ktpi_gap = Par_44;
    Ktpi_dhap = Par_45;
    Vftpi = Vfftpi;
    Vbtpi = Vftpi*Ktpi_dhap/(Ktpi_gap*Kapp_TPI);
    v_TPI = (Vftpi*GAP/Ktpi_gap-Vbtpi*DHAP/Ktpi_dhap)/(1{dimensionless}+GAP/Ktpi_gap+DHAP/Ktpi_dhap);
  enddef;

  def comp G3PDH as
    var Vbbg3pdh: molar_per_minute;
    var Kg3pdh_g3p: molar;
    var Kg3pdh_nad: molar;
    var Kg3pdh_dhap: molar;
    var Kg3pdh_nadh: molar;
    var Dg3pdh: dimensionless;
    var Vbg3pdh: molar_per_minute;
    var Vfg3pdh: molar_per_minute;
    var v_G3PDH: molar_per_minute {pub: out};
    var Kapp_G3PDH: dimensionless {pub: in};
    var DHAP: molar {pub: in};
    var G3P: molar {pub: in};
    var NAD: molar {pub: in};
    var NADH: molar {pub: in};
    var Par_46: molar_per_minute {pub: in};
    var Par_47: molar {pub: in};
    var Par_48: molar {pub: in};
    var Par_49: molar {pub: in};
    var Par_50: molar {pub: in};
    Vbbg3pdh = Par_46;
    Kg3pdh_g3p = Par_47;
    Kg3pdh_nad = Par_48;
    Kg3pdh_dhap = Par_49;
    Kg3pdh_nadh = Par_50;
    Dg3pdh = (1{dimensionless}+G3P/Kg3pdh_g3p+NADH/Kg3pdh_nadh)*(1{dimensionless}+DHAP/Kg3pdh_dhap+NAD/Kg3pdh_nadh);
    Vbg3pdh = Vbbg3pdh;
    Vfg3pdh = Vbg3pdh*Kg3pdh_g3p*Kg3pdh_nad*Kapp_G3PDH/(Kg3pdh_dhap*Kg3pdh_nadh);
    v_G3PDH = (Vfg3pdh*G3P*NAD/(Kg3pdh_g3p*Kg3pdh_nad)-Vbg3pdh*DHAP*NADH/(Kg3pdh_dhap*Kg3pdh_nadh))/Dg3pdh;
  enddef;

  def comp GAPDH as
    var Vffgad: molar_per_minute;
    var Kgapdh_gap: molar;
    var Kgapdh_nad: molar;
    var Kgapdh_pi: molar;
    var Kgapdh_bpg: molar;
    var Kgapdh_nadh: molar;
    var Dgap: dimensionless;
    var Vfgad: molar_per_minute;
    var Vbgad: molar_per_minute;
    var v_GAPDH: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Kapp_GAPDH: per_molar {pub: in};
    var BPG: molar {pub: in};
    var GAP: molar {pub: in};
    var NAD: molar {pub: in};
    var NADH: molar {pub: in};
    var Pi: molar {pub: in};
    var Par_51: molar_per_minute {pub: in};
    var Par_52: molar {pub: in};
    var Par_53: molar {pub: in};
    var Par_54: molar {pub: in};
    var Par_55: molar {pub: in};
    var Par_56: molar {pub: in};
    Vffgad = Par_51;
    Kgapdh_gap = Par_52;
    Kgapdh_nad = Par_53;
    Kgapdh_pi = Par_54;
    Kgapdh_bpg = Par_55;
    Kgapdh_nadh = Par_56;
    Dgap = 1{dimensionless}+Pi/Kgapdh_pi+GAP/Kgapdh_gap+NAD/Kgapdh_nad+GAP*NAD/(Kgapdh_gap*Kgapdh_nad)+GAP*NAD*Pi/(Kgapdh_gap*Kgapdh_nad*Kgapdh_pi)+BPG/Kgapdh_bpg+NADH/Kgapdh_nadh+BPG*NADH/(Kgapdh_nadh*Kgapdh_bpg);
    Vfgad = Vffgad*0.0007{dimensionless}*exp(pH_cy*0.8979{dimensionless});
    Vbgad = Vfgad*Kgapdh_bpg*Kgapdh_nadh/(Kgapdh_gap*Kgapdh_pi*Kgapdh_nad*Kapp_GAPDH);
    v_GAPDH = (Vfgad*GAP*NAD*Pi/(Kgapdh_nad*Kgapdh_gap*Kgapdh_pi)-Vbgad*BPG*NADH/(Kgapdh_bpg*Kgapdh_nadh))/Dgap;
  enddef;

  def comp PGK as
    var Vbbpgk: molar_per_minute;
    var Kpgk_bpg: molar;
    var Kpgk_adp: molar;
    var Kpgk_3pg: molar;
    var Kpgk_atp: molar;
    var Vbpgk: molar_per_minute;
    var Vfpgk: molar_per_minute;
    var D_PGK: dimensionless;
    var v_PGK: molar_per_minute {pub: out};
    var Kapp_PGK: dimensionless {pub: in};
    var BPG: molar {pub: in};
    var P3G: molar {pub: in};
    var ADP: molar {pub: in};
    var ATP: molar {pub: in};
    var Par_57: molar_per_minute {pub: in};
    var Par_58: molar {pub: in};
    var Par_59: molar {pub: in};
    var Par_60: molar {pub: in};
    var Par_61: molar {pub: in};
    Vbbpgk = Par_57;
    Kpgk_bpg = Par_58;
    Kpgk_adp = Par_59;
    Kpgk_3pg = Par_60;
    Kpgk_atp = Par_61;
    Vbpgk = Vbbpgk;
    Vfpgk = Vbpgk*Kpgk_bpg*Kpgk_adp/(Kpgk_3pg*Kpgk_atp)*Kapp_PGK;
    D_PGK = 1{dimensionless}+ADP/Kpgk_adp+BPG/Kpgk_bpg+BPG*ADP/(Kpgk_bpg*Kpgk_adp)+P3G/Kpgk_3pg+ATP/Kpgk_atp+P3G*ATP/(Kpgk_3pg*Kpgk_atp);
    v_PGK = (Vfpgk*BPG*ADP/(Kpgk_adp*Kpgk_bpg)-Vbpgk*ATP*P3G/(Kpgk_atp*Kpgk_3pg))/D_PGK;
  enddef;

  def comp PGM as
    var Vffpgm: molar_per_minute;
    var Kpgm_3pg: molar;
    var Kpgm_2pg: molar;
    var Vfpgm: molar_per_minute;
    var Vbpgm: molar_per_minute;
    var v_PGM: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Kapp_PGM: dimensionless {pub: in};
    var P2G: molar {pub: in};
    var P3G: molar {pub: in};
    var Par_62: molar_per_minute {pub: in};
    var Par_63: molar {pub: in};
    var Par_64: molar {pub: in};
    Vffpgm = Par_62;
    Kpgm_3pg = Par_63;
    Kpgm_2pg = Par_64;
    Vfpgm = Vffpgm*0.989{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+5.62{dimensionless})+pow(10{dimensionless}, pH_cy-8.74{dimensionless}));
    Vbpgm = Vfpgm*Kpgm_2pg/(Kpgm_3pg*Kapp_PGM);
    v_PGM = (Vfpgm*P3G/Kpgm_3pg-Vbpgm*P2G/Kpgm_2pg)/(1{dimensionless}+P3G/Kpgm_3pg+P2G/Kpgm_2pg);
  enddef;

  def comp ENOL as
    var Vffen: molar_per_minute;
    var Ken_2pg: molar;
    var Ken_pep: molar;
    var Vfen: molar_per_minute;
    var Vben: molar_per_minute;
    var v_ENOL: molar_per_minute {pub: out};
    var Kapp_ENOL: dimensionless {pub: in};
    var P2G: molar {pub: in};
    var PEP: molar {pub: in};
    var Par_65: molar_per_minute {pub: in};
    var Par_66: molar {pub: in};
    var Par_67: molar {pub: in};
    Vffen = Par_65;
    Ken_2pg = Par_66;
    Ken_pep = Par_67;
    Vfen = Vffen;
    Vben = Vfen*Ken_pep/(Ken_2pg*Kapp_ENOL);
    v_ENOL = (Vfen*P2G/Ken_2pg-Vben*PEP/Ken_pep)/(1{dimensionless}+PEP/Ken_pep+P2G/Ken_2pg);
  enddef;

  def comp PK as
    var Vffpk: molar_per_minute;
    var Kpk_pep: molar;
    var Kpk_adp: molar;
    var Kpk_pyr: molar;
    var Kpk_atp: molar;
    var Vfpk: molar_per_minute;
    var Vbpk: molar_per_minute;
    var v_PK: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Kapp_PK: dimensionless {pub: in};
    var PEP: molar {pub: in};
    var PYR: molar {pub: in};
    var ADP: molar {pub: in};
    var ATP: molar {pub: in};
    var Par_68: molar_per_minute {pub: in};
    var Par_69: molar {pub: in};
    var Par_70: molar {pub: in};
    var Par_71: molar {pub: in};
    var Par_72: molar {pub: in};
    Vffpk = Par_68;
    Kpk_pep = Par_69;
    Kpk_adp = Par_70;
    Kpk_pyr = Par_71;
    Kpk_atp = Par_72;
    Vfpk = Vffpk*1.05{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+5.58{dimensionless})+pow(10{dimensionless}, pH_cy-8.79{dimensionless}));
    Vbpk = Vfpk*Kpk_pyr*Kpk_atp/(Kpk_pep*Kpk_adp*Kapp_PK);
    v_PK = (Vfpk*PEP*ADP/(Kpk_pep*Kpk_adp)-Vbpk*PYR*ATP/(Kpk_pyr*Kpk_atp))/(1{dimensionless}+PEP/Kpk_pep+ADP/Kpk_adp+PEP*ADP/(Kpk_pep*Kpk_adp)+ATP/Kpk_atp+PYR/Kpk_pyr+PYR*ATP/(Kpk_pyr*Kpk_atp));
  enddef;

  def comp LDH as
    var Vffldh: molar_per_minute;
    var Kldh_pyr: molar;
    var Kldh_nadh: molar;
    var Kldh_lac: molar;
    var Kldh_nad: molar;
    var Vfldh: molar_per_minute;
    var Vbldh: molar_per_minute;
    var v_LDH: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Kapp_LDH: dimensionless {pub: in};
    var LAC: molar {pub: in};
    var NAD: molar {pub: in};
    var NADH: molar {pub: in};
    var PYR: molar {pub: in};
    var Par_73: molar_per_minute {pub: in};
    var Par_74: molar {pub: in};
    var Par_75: molar {pub: in};
    var Par_76: molar {pub: in};
    var Par_77: molar {pub: in};
    Vffldh = Par_73;
    Kldh_pyr = Par_74;
    Kldh_nadh = Par_75;
    Kldh_lac = Par_76;
    Kldh_nad = Par_77;
    Vfldh = Vffldh*(-0.1134{dimensionless}*pH_cy+1.6069{dimensionless});
    Vbldh = Vfldh*Kldh_lac*Kldh_nad/(Kldh_pyr*Kldh_nadh*Kapp_LDH);
    v_LDH = (Vfldh*PYR*NADH/(Kldh_pyr*Kldh_nadh)-Vbldh*LAC*NAD/(Kldh_lac*Kldh_nad))/(1{dimensionless}+PYR/Kldh_pyr+NADH/Kldh_nadh+PYR*NADH/(Kldh_pyr*Kldh_nadh)+LAC/Kldh_lac+NAD/Kldh_nad+LAC*NAD/(Kldh_lac*Kldh_nad));
  enddef;

  def comp ATPase as
    var VmaxATPase: molar_per_minute;
    var Katp_ATPase: molar;
    var ATPase: molar_per_minute {pub: out};
    var time: minute {pub: in};
    var ATP: molar {pub: in};
    var expno: dimensionless {pub: in};
    var Par_88: molar_per_minute {pub: in};
    var Par_89: molar {pub: in};
    VmaxATPase = sel
      case (expno <> 5{dimensionless}) and (expno <> 45{dimensionless}):
        Par_88;
      case (expno <> 5{dimensionless}) and (expno == 45{dimensionless}) and (time >= 110{minute}):
        Par_88;
      case (expno == 5{dimensionless}) and (time > 30{minute}):
        Par_88;
      otherwise:
        0{molar_per_minute};
    endsel;
    Katp_ATPase = Par_89;
    ATPase = VmaxATPase*ATP/(Katp_ATPase+ATP);
  enddef;

  def comp creatine_kinase as
    var VforCK: molar_per_minute;
    var Kck_pcr: molar;
    var Kck_iatp: molar;
    var Kck_iadp: molar;
    var Kck_ipcr: molar;
    var Kck_cr: molar;
    var VrevCK: molar_per_minute;
    var CK: molar_per_minute {pub: out};
    var Kapp_CK: dimensionless {pub: in};
    var ADP: molar {pub: in};
    var ATP: molar {pub: in};
    var Cr: molar {pub: in};
    var PCr: molar {pub: in};
    var Par_78: molar_per_minute {pub: in};
    var Par_79: molar {pub: in};
    var Par_80: molar {pub: in};
    var Par_81: molar {pub: in};
    var Par_82: molar {pub: in};
    var Par_83: molar {pub: in};
    VforCK = Par_78;
    Kck_pcr = Par_79;
    Kck_iatp = Par_80;
    Kck_iadp = Par_81;
    Kck_ipcr = Par_82;
    Kck_cr = Par_83;
    VrevCK = VforCK/Kapp_CK*Kck_iatp*Kck_cr/(Kck_iadp*Kck_pcr);
    CK = (VrevCK*ATP*Cr/(Kck_iatp*Kck_cr)-VforCK*ADP*PCr/(Kck_iadp*Kck_pcr))/(1{dimensionless}+ADP/Kck_iadp+PCr/Kck_ipcr+PCr*ADP/(Kck_iadp*Kck_pcr)+ATP/Kck_iatp+Cr*ATP/(Kck_cr*Kck_iatp));
  enddef;

  def comp adenylate_kinase as
    var Vfadk: molar_per_minute;
    var Kadk_amp: molar;
    var Kadk_atp: molar;
    var Kadk_adp: molar;
    var Vbadk: molar_per_minute;
    var ADK: molar_per_minute {pub: out};
    var Kapp_ADK: dimensionless {pub: in};
    var AMP: molar {pub: in};
    var ADP: molar {pub: in};
    var ATP: molar {pub: in};
    var Par_84: molar_per_minute {pub: in};
    var Par_85: molar {pub: in};
    var Par_86: molar {pub: in};
    var Par_87: molar {pub: in};
    Vfadk = Par_84;
    Kadk_amp = Par_85;
    Kadk_atp = Par_86;
    Kadk_adp = Par_87;
    Vbadk = Vfadk*sqr(Kadk_adp)/(Kadk_amp*Kadk_atp*Kapp_ADK);
    ADK = (Vfadk*ATP*AMP/(Kadk_atp*Kadk_amp)-Vbadk*sqr(ADP/Kadk_adp))/(1{dimensionless}+ATP/Kadk_atp+AMP/Kadk_amp+ATP*AMP/(Kadk_atp*Kadk_amp)+2{dimensionless}*ADP/Kadk_adp+sqr(ADP)/sqr(Kadk_adp));
  enddef;

  def comp buffer_capacity as
    var carnosine: molar;
    var tris: molar;
    var acetate: molar;
    var bufcapfixed: molar;
    var bufcapmetab: molar;
    var protons_consumed: molar_per_minute {pub: out};
    var CKprtflux: molar_per_minute;
    var glycprtflux: molar_per_minute;
    var pHODEterm1: per_minute {pub: out};
    var pHODEterm2: per_molar {pub: out};
    var denom_mgODE: dimensionless {pub: out};
    var RHSterm1_mgODE: molar {pub: out};
    var denomMgpHODE: dimensionless {pub: out};
    var pH_cy: dimensionless {pub: in};
    var PCr: molar {pub: in};
    var Cr: molar {pub: in};
    var NAD: molar {pub: in};
    var NADH: molar {pub: in};
    var ATP: molar {pub: in};
    var ADP: molar {pub: in};
    var AMP: molar {pub: in};
    var Pi: molar {pub: in};
    var Gly: molar {pub: in};
    var G1P: molar {pub: in};
    var G6P: molar {pub: in};
    var F6P: molar {pub: in};
    var FBP: molar {pub: in};
    var DHAP: molar {pub: in};
    var G3P: molar {pub: in};
    var GAP: molar {pub: in};
    var BPG: molar {pub: in};
    var P3G: molar {pub: in};
    var P2G: molar {pub: in};
    var PEP: molar {pub: in};
    var PYR: molar {pub: in};
    var LAC: molar {pub: in};
    var ADK: molar_per_minute {pub: in};
    var CK: molar_per_minute {pub: in};
    var dNavg13DPGdH: per_molar {pub: in};
    var dNavg3PGdH: per_molar {pub: in};
    var dNavg2PGdH: per_molar {pub: in};
    var dNavgADPdH: per_molar {pub: in};
    var dNavgAMPdH: per_molar {pub: in};
    var dNavgATPdH: per_molar {pub: in};
    var dNavgCRdH: per_molar {pub: in};
    var dNavgDHAPdH: per_molar {pub: in};
    var dNavgF6PdH: per_molar {pub: in};
    var dNavgFDPdH: per_molar {pub: in};
    var dNavgG1PdH: per_molar {pub: in};
    var dNavgG3PdH: per_molar {pub: in};
    var dNavgG6PdH: per_molar {pub: in};
    var dNavgGAPdH: per_molar {pub: in};
    var dNavgLACdH: per_molar {pub: in};
    var dNavgPCRdH: per_molar {pub: in};
    var dNavgPEPdH: per_molar {pub: in};
    var dNavgPYRdH: per_molar {pub: in};
    var dNavgPidH: per_molar {pub: in};
    var deltaH_ADK: dimensionless {pub: in};
    var deltaH_ALD: dimensionless {pub: in};
    var deltaH_CK: dimensionless {pub: in};
    var deltaH_ENOL: dimensionless {pub: in};
    var deltaH_G3PDH: dimensionless {pub: in};
    var deltaH_GAPDH: dimensionless {pub: in};
    var deltaH_GP: dimensionless {pub: in};
    var deltaH_LDH: dimensionless {pub: in};
    var deltaH_PFK: dimensionless {pub: in};
    var deltaH_PGI: dimensionless {pub: in};
    var deltaH_PGK: dimensionless {pub: in};
    var deltaH_PGLM: dimensionless {pub: in};
    var deltaH_PGM: dimensionless {pub: in};
    var deltaH_PK: dimensionless {pub: in};
    var deltaH_TPI: dimensionless {pub: in};
    var dNavg13DPGdmg: per_molar {pub: in};
    var dNavg2PGdmg: per_molar {pub: in};
    var dNavg3PGdmg: per_molar {pub: in};
    var dNavgADPdmg: per_molar {pub: in};
    var dNavgAMPdmg: per_molar {pub: in};
    var dNavgATPdmg: per_molar {pub: in};
    var dNavgCRdmg: per_molar {pub: in};
    var dNavgDHAPdmg: per_molar {pub: in};
    var dNavgF6Pdmg: per_molar {pub: in};
    var dNavgFDPdmg: per_molar {pub: in};
    var dNavgG1Pdmg: per_molar {pub: in};
    var dNavgG3Pdmg: per_molar {pub: in};
    var dNavgG6Pdmg: per_molar {pub: in};
    var dNavgGAPdmg: per_molar {pub: in};
    var dNavgLACdmg: per_molar {pub: in};
    var dNavgPCRdmg: per_molar {pub: in};
    var dNavgPEPdmg: per_molar {pub: in};
    var dNavgPYRdmg: per_molar {pub: in};
    var dNavgPidmg: per_molar {pub: in};
    var dmg2PGdmg: per_molar {pub: in};
    var dmgATP2dmg: per_molar {pub: in};
    var dmgADPdmg: per_molar {pub: in};
    var dmgAMPdmg: per_molar {pub: in};
    var dmgDHAPdmg: per_molar {pub: in};
    var dmgFDPdmg: per_molar {pub: in};
    var dmgG1Pdmg: per_molar {pub: in};
    var dmgG3Pdmg: per_molar {pub: in};
    var dmgLACdmg: per_molar {pub: in};
    var dmgPCRdmg: per_molar {pub: in};
    var dmgPEPdmg: per_molar {pub: in};
    var dmgPidmg: per_molar {pub: in};
    var dmg2PGdpH: dimensionless {pub: in};
    var dmgADPdpH: dimensionless {pub: in};
    var dmgAMPdpH: dimensionless {pub: in};
    var dmgATP2dpH: dimensionless {pub: in};
    var dmgDHAPdpH: dimensionless {pub: in};
    var dmgFDPdpH: dimensionless {pub: in};
    var dmgG1PdpH: dimensionless {pub: in};
    var dmgG3PdpH: dimensionless {pub: in};
    var dmgLACdpH: dimensionless {pub: in};
    var dmgPCRdpH: dimensionless {pub: in};
    var dmgPEPdpH: dimensionless {pub: in};
    var dmgPidpH: dimensionless {pub: in};
    var flux_GPa: molar_per_minute {pub: in};
    var flux_GPb: molar_per_minute {pub: in};
    var v_ALD: molar_per_minute {pub: in};
    var v_ENOL: molar_per_minute {pub: in};
    var v_G3PDH: molar_per_minute {pub: in};
    var v_GAPDH: molar_per_minute {pub: in};
    var v_LDH: molar_per_minute {pub: in};
    var v_PFK: molar_per_minute {pub: in};
    var v_PGI: molar_per_minute {pub: in};
    var v_PGK: molar_per_minute {pub: in};
    var v_PGLM: molar_per_minute {pub: in};
    var v_PGM: molar_per_minute {pub: in};
    var v_PK: molar_per_minute {pub: in};
    var v_TPI: molar_per_minute {pub: in};
    var c0: molar {pub: in};
    var Par_91: molar {pub: in};
    var Par_92: molar {pub: in};
    var Par_93: molar {pub: in};
    carnosine = Par_92;
    tris = Par_91;
    acetate = Par_93;
    bufcapfixed = ln(10{dimensionless})*carnosine*pow(10{dimensionless}, -pH_cy-6.87{dimensionless})/sqr(pow(10{dimensionless}, -pH_cy)+pow(10{dimensionless}, -6.87{dimensionless}))+ln(10{dimensionless})*tris*pow(10{dimensionless}, -pH_cy-8.3{dimensionless})/sqr(pow(10{dimensionless}, -pH_cy)+pow(10{dimensionless}, -8.3{dimensionless}))+ln(10{dimensionless})*acetate*pow(10{dimensionless}, -pH_cy-4.8{dimensionless})/sqr(pow(10{dimensionless}, -pH_cy)+pow(10{dimensionless}, -4.8{dimensionless}));
    bufcapmetab = ln(10{dimensionless})*pow(10{dimensionless}, -pH_cy)*c0*(1{dimensionless}+dNavgPidH*Pi+dNavgATPdH*ATP+dNavgADPdH*ADP+dNavgAMPdH*AMP+dNavgPCRdH*PCr+dNavgCRdH*Cr+dNavgG1PdH*G1P+dNavgG6PdH*G6P+dNavgF6PdH*F6P+dNavgFDPdH*FBP+dNavgGAPdH*GAP+dNavgDHAPdH*DHAP+dNavgG3PdH*G3P+dNavg13DPGdH*BPG+dNavg3PGdH*P3G+dNavg2PGdH*P2G+dNavgPEPdH*PEP+dNavgPYRdH*PYR+dNavgLACdH*LAC);
    protons_consumed = deltaH_CK*(-CK)+deltaH_ADK*ADK+deltaH_PGLM*v_PGLM+deltaH_GP*(flux_GPa+flux_GPb)+deltaH_PGI*v_PGI+deltaH_PFK*v_PFK+deltaH_ALD*v_ALD+deltaH_TPI*v_TPI+deltaH_GAPDH*v_GAPDH+deltaH_PGK*v_PGK+deltaH_PGM*v_PGM+deltaH_ENOL*v_ENOL+deltaH_PK*v_PK+deltaH_LDH*v_LDH+deltaH_G3PDH*v_G3PDH;
    CKprtflux = deltaH_CK*(-CK);
    glycprtflux = deltaH_PGLM*v_PGLM+deltaH_GP*(flux_GPa+flux_GPb)+deltaH_PGI*v_PGI+deltaH_PFK*v_PFK+deltaH_ALD*v_ALD+deltaH_TPI*v_TPI+deltaH_GAPDH*v_GAPDH+deltaH_PGK*v_PGK+deltaH_PGM*v_PGM+deltaH_ENOL*v_ENOL+deltaH_PK*v_PK+deltaH_LDH*v_LDH+deltaH_G3PDH*v_G3PDH;
    pHODEterm1 = protons_consumed/(bufcapfixed+bufcapmetab);
    pHODEterm2 = (dNavgPidmg*Pi+dNavgATPdmg*ATP+dNavgADPdmg*ADP+dNavgAMPdmg*AMP+dNavgPCRdmg*PCr+dNavgCRdmg*Cr+dNavgG1Pdmg*G1P+dNavgG6Pdmg*G6P+dNavgF6Pdmg*F6P+dNavgFDPdmg*FBP+dNavgGAPdmg*GAP+dNavgDHAPdmg*DHAP+dNavgG3Pdmg*G3P+dNavg13DPGdmg*BPG+dNavg3PGdmg*P3G+dNavg2PGdmg*P2G+dNavgPEPdmg*PEP+dNavgPYRdmg*PYR+dNavgLACdmg*LAC)/(bufcapfixed+bufcapmetab);
    denom_mgODE = -1{dimensionless}-(dmgATP2dmg*ATP+dmgADPdmg*ADP+dmgAMPdmg*AMP+dmgPidmg*Pi+dmgPCRdmg*PCr+dmgG1Pdmg*G1P+dmgFDPdmg*FBP+dmgG3Pdmg*G3P+dmgDHAPdmg*DHAP+dmgPEPdmg*PEP+dmg2PGdmg*P2G+dmgLACdmg*LAC);
    RHSterm1_mgODE = (dmgATP2dpH*ATP+dmgADPdpH*ADP+dmgAMPdpH*AMP+dmgPidpH*Pi+dmgPCRdpH*PCr+dmgG1PdpH*G1P+dmgFDPdpH*FBP+dmgG3PdpH*G3P+dmgDHAPdpH*DHAP+dmgPEPdpH*PEP+dmg2PGdpH*P2G+dmgLACdpH*LAC)/denom_mgODE;
    denomMgpHODE = 1{dimensionless}-RHSterm1_mgODE*pHODEterm2;
  enddef;

  def comp differential_equations as
    var PCr: molar {init: 1e-9, pub: out};
    var Cr: molar {init: 0.029999999, pub: out};
    var NAD: molar {init: 0.0005, pub: out};
    var NADH: molar {init: 1e-9, pub: out};
    var ATP: molar {init: 0.005, pub: out};
    var ADP: molar {init: 1e-9, pub: out};
    var AMP: molar {init: 1e-9, pub: out};
    var Pi: molar {init: 0.03, pub: out};
    var Gly: molar {init: 0.04, pub: out};
    var G1P: molar {init: 1e-9, pub: out};
    var G6P: molar {init: 1e-9, pub: out};
    var F6P: molar {init: 1e-9, pub: out};
    var FBP: molar {init: 1e-9, pub: out};
    var DHAP: molar {init: 1e-9, pub: out};
    var G3P: molar {init: 1e-9, pub: out};
    var GAP: molar {init: 1e-9, pub: out};
    var BPG: molar {init: 1e-9, pub: out};
    var P3G: molar {init: 1e-9, pub: out};
    var P2G: molar {init: 1e-9, pub: out};
    var PEP: molar {init: 1e-9, pub: out};
    var PYR: molar {init: 1e-9, pub: out};
    var LAC: molar {init: 1e-9, pub: out};
    var RHSterm2_mgODE: molar_per_minute;
    var fixmg: dimensionless;
    var Mg: molar {init: 5.132658807e-4, pub: out};
    var fixpH: dimensionless;
    var pH_calc: dimensionless {init: 7.8, pub: out};
    var protonload: molar {init: 0, pub: out};
    var time: minute {pub: in};
    var ADK: molar_per_minute {pub: in};
    var CK: molar_per_minute {pub: in};
    var flux_GPa: molar_per_minute {pub: in};
    var flux_GPb: molar_per_minute {pub: in};
    var v_ALD: molar_per_minute {pub: in};
    var v_ENOL: molar_per_minute {pub: in};
    var v_G3PDH: molar_per_minute {pub: in};
    var v_GAPDH: molar_per_minute {pub: in};
    var v_LDH: molar_per_minute {pub: in};
    var v_PFK: molar_per_minute {pub: in};
    var v_PGI: molar_per_minute {pub: in};
    var v_PGK: molar_per_minute {pub: in};
    var v_PGLM: molar_per_minute {pub: in};
    var v_PGM: molar_per_minute {pub: in};
    var v_PK: molar_per_minute {pub: in};
    var v_TPI: molar_per_minute {pub: in};
    var ATPase: molar_per_minute {pub: in};
    var dATPdt: molar_per_minute;
    var dADPdt: molar_per_minute;
    var dAMPdt: molar_per_minute;
    var dDHAPdt: molar_per_minute;
    var dFBPdt: molar_per_minute;
    var dG1Pdt: molar_per_minute;
    var dG3Pdt: molar_per_minute;
    var dLACdt: molar_per_minute;
    var dP2Gdt: molar_per_minute;
    var dPCrdt: molar_per_minute;
    var dPEPdt: molar_per_minute;
    var dPidt: molar_per_minute;
    var dCrdt: molar_per_minute;
    var dNADdt: molar_per_minute;
    var dNADHdt: molar_per_minute;
    var dGlydt: molar_per_minute;
    var dG6Pdt: molar_per_minute;
    var dF6Pdt: molar_per_minute;
    var dGAPdt: molar_per_minute;
    var dBGPdt: molar_per_minute;
    var dP3Gdt: molar_per_minute;
    var dPYRdt: molar_per_minute;
    var protons_consumed: molar_per_minute {pub: in};
    var pHODEterm1: per_minute {pub: in};
    var pHODEterm2: per_molar {pub: in};
    var denom_mgODE: dimensionless {pub: in};
    var RHSterm1_mgODE: molar {pub: in};
    var mg2PG: dimensionless {pub: in};
    var mgATP2: dimensionless {pub: in};
    var mgADP: dimensionless {pub: in};
    var mgAMP: dimensionless {pub: in};
    var mgDHAP: dimensionless {pub: in};
    var mgFDP: dimensionless {pub: in};
    var mgG1P: dimensionless {pub: in};
    var mgG3P: dimensionless {pub: in};
    var mgLAC: dimensionless {pub: in};
    var mgPCR: dimensionless {pub: in};
    var mgPEP: dimensionless {pub: in};
    var mgPi: dimensionless {pub: in};
    var Par_99: dimensionless {pub: in};
    ode(PCr, time) = dPCrdt;
    dPCrdt = CK;
    ode(Cr, time) = dCrdt;
    dCrdt = -CK;
    ode(NAD, time) = dNADdt;
    dNADdt = -v_GAPDH-v_G3PDH+v_LDH;
    ode(NADH, time) = dNADHdt;
    dNADHdt = v_GAPDH+v_G3PDH-v_LDH;
    ode(ATP, time) = dATPdt;
    dATPdt = -CK-ADK-v_PFK+v_PGK+v_PK-ATPase;
    ode(ADP, time) = dADPdt;
    dADPdt = CK+2{dimensionless}*ADK+v_PFK-v_PGK-v_PK+ATPase;
    ode(AMP, time) = dAMPdt;
    dAMPdt = -ADK;
    ode(Pi, time) = dPidt;
    dPidt = -(flux_GPa+flux_GPb)-v_GAPDH+ATPase;
    ode(Gly, time) = dGlydt;
    dGlydt = -(flux_GPa+flux_GPb);
    ode(G1P, time) = dG1Pdt;
    dG1Pdt = flux_GPa+flux_GPb-v_PGLM;
    ode(G6P, time) = dG6Pdt;
    dG6Pdt = v_PGLM-v_PGI;
    ode(F6P, time) = dF6Pdt;
    dF6Pdt = v_PGI-v_PFK;
    ode(FBP, time) = dFBPdt;
    dFBPdt = v_PFK-v_ALD;
    ode(DHAP, time) = dDHAPdt;
    dDHAPdt = v_ALD+v_TPI+v_G3PDH;
    ode(G3P, time) = dG3Pdt;
    dG3Pdt = -v_G3PDH;
    ode(GAP, time) = dGAPdt;
    dGAPdt = v_ALD-v_TPI-v_GAPDH;
    ode(BPG, time) = dBGPdt;
    dBGPdt = v_GAPDH-v_PGK;
    ode(P3G, time) = dP3Gdt;
    dP3Gdt = v_PGK-v_PGM;
    ode(P2G, time) = dP2Gdt;
    dP2Gdt = v_PGM-v_ENOL;
    ode(PEP, time) = dPEPdt;
    dPEPdt = v_ENOL-v_PK;
    ode(PYR, time) = dPYRdt;
    dPYRdt = v_PK-v_LDH;
    ode(LAC, time) = dLACdt;
    dLACdt = v_LDH;
    RHSterm2_mgODE = (mgATP2*dATPdt+mgADP*dADPdt+mgAMP*dAMPdt+mgPi*dPidt+mgPCR*dPCrdt+mgG1P*dG1Pdt+mgFDP*dFBPdt+mgG3P*dG3Pdt+mgDHAP*dDHAPdt+mgPEP*dPEPdt+mg2PG*dP2Gdt+mgLAC*dLACdt)/denom_mgODE;
    fixmg = 1{dimensionless};
    ode(Mg, time) = sel
      case time <= 1{minute}:
        fixmg*(RHSterm2_mgODE+RHSterm1_mgODE*pHODEterm1)/(1{dimensionless}-RHSterm1_mgODE*pHODEterm2);
      otherwise:
        fixmg*RHSterm2_mgODE;
    endsel;
    fixpH = Par_99;
    ode(pH_calc, time) = fixpH*(pHODEterm1+RHSterm2_mgODE*pHODEterm2)/(1{dimensionless}-RHSterm1_mgODE*pHODEterm2);
    ode(protonload, time) = -protons_consumed;
  enddef;
  def map between environment and correction_factors for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and glycogen_phosphorylase for
    vars time and time;
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and glycogen_phosphorylase_B for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PGLM for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PGI for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PFK for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and ALD for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and GAPDH for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PGM for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PK for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and LDH for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and buffer_capacity for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and ATPase for
    vars time and time;
  enddef;
  def map between environment and differential_equations for
    vars time and time;
    vars pH_calc and pH_calc;
  enddef;
  def map between parameters and environment for
    vars Par_97 and Par_97;
    vars Par_98 and Par_98;
  enddef;
  def map between parameters and global_parameters for
    vars Par_90 and Par_90;
    vars Par_94 and Par_94;
  enddef;
  def map between parameters and equilibrium_constants for
    vars Par_95 and Par_95;
    vars Par_96 and Par_96;
  enddef;
  def map between parameters and glycogen_phosphorylase for
    vars Par_1 and Par_1;
    vars Par_2 and Par_2;
    vars Par_3 and Par_3;
    vars Par_4 and Par_4;
    vars Par_5 and Par_5;
    vars Par_6 and Par_6;
    vars Par_7 and Par_7;
    vars Par_8 and Par_8;
    vars Par_9 and Par_9;
    vars Par_100 and Par_100;
  enddef;
  def map between parameters and glycogen_phosphorylase_B for
    vars Par_10 and Par_10;
    vars Par_11 and Par_11;
    vars Par_12 and Par_12;
    vars Par_13 and Par_13;
    vars Par_14 and Par_14;
    vars Par_15 and Par_15;
    vars Par_16 and Par_16;
    vars Par_17 and Par_17;
    vars Par_18 and Par_18;
  enddef;
  def map between parameters and PGLM for
    vars Par_19 and Par_19;
    vars Par_20 and Par_20;
    vars Par_21 and Par_21;
  enddef;
  def map between parameters and PGI for
    vars Par_22 and Par_22;
    vars Par_23 and Par_23;
    vars Par_24 and Par_24;
  enddef;
  def map between parameters and PFK for
    vars Par_25 and Par_25;
    vars Par_26 and Par_26;
    vars Par_27 and Par_27;
    vars Par_28 and Par_28;
    vars Par_29 and Par_29;
    vars Par_30 and Par_30;
    vars Par_31 and Par_31;
    vars Par_32 and Par_32;
    vars Par_33 and Par_33;
    vars Par_34 and Par_34;
    vars Par_35 and Par_35;
    vars Par_36 and Par_36;
    vars Par_37 and Par_37;
    vars Par_38 and Par_38;
  enddef;
  def map between parameters and ALD for
    vars Par_39 and Par_39;
    vars Par_40 and Par_40;
    vars Par_41 and Par_41;
    vars Par_42 and Par_42;
  enddef;
  def map between parameters and TPI for
    vars Par_43 and Par_43;
    vars Par_44 and Par_44;
    vars Par_45 and Par_45;
  enddef;
  def map between parameters and G3PDH for
    vars Par_46 and Par_46;
    vars Par_47 and Par_47;
    vars Par_48 and Par_48;
    vars Par_49 and Par_49;
    vars Par_50 and Par_50;
  enddef;
  def map between parameters and GAPDH for
    vars Par_51 and Par_51;
    vars Par_52 and Par_52;
    vars Par_53 and Par_53;
    vars Par_54 and Par_54;
    vars Par_55 and Par_55;
    vars Par_56 and Par_56;
  enddef;
  def map between parameters and PGK for
    vars Par_57 and Par_57;
    vars Par_58 and Par_58;
    vars Par_59 and Par_59;
    vars Par_60 and Par_60;
    vars Par_61 and Par_61;
  enddef;
  def map between parameters and PGM for
    vars Par_62 and Par_62;
    vars Par_63 and Par_63;
    vars Par_64 and Par_64;
  enddef;
  def map between parameters and ENOL for
    vars Par_65 and Par_65;
    vars Par_66 and Par_66;
    vars Par_67 and Par_67;
  enddef;
  def map between parameters and PK for
    vars Par_68 and Par_68;
    vars Par_69 and Par_69;
    vars Par_70 and Par_70;
    vars Par_71 and Par_71;
    vars Par_72 and Par_72;
  enddef;
  def map between parameters and LDH for
    vars Par_73 and Par_73;
    vars Par_74 and Par_74;
    vars Par_75 and Par_75;
    vars Par_76 and Par_76;
    vars Par_77 and Par_77;
  enddef;
  def map between parameters and ATPase for
    vars Par_88 and Par_88;
    vars Par_89 and Par_89;
  enddef;
  def map between parameters and creatine_kinase for
    vars Par_78 and Par_78;
    vars Par_79 and Par_79;
    vars Par_80 and Par_80;
    vars Par_81 and Par_81;
    vars Par_82 and Par_82;
    vars Par_83 and Par_83;
  enddef;
  def map between parameters and adenylate_kinase for
    vars Par_84 and Par_84;
    vars Par_85 and Par_85;
    vars Par_86 and Par_86;
    vars Par_87 and Par_87;
  enddef;
  def map between parameters and buffer_capacity for
    vars Par_91 and Par_91;
    vars Par_92 and Par_92;
    vars Par_93 and Par_93;
  enddef;
  def map between parameters and differential_equations for
    vars Par_99 and Par_99;
  enddef;
  def map between global_parameters and correction_factors for
    vars R and R;
    vars T and T;
    vars T1 and T1;
    vars I and I;
  enddef;
  def map between equilibrium_constants and correction_factors for
    vars mgT and mgT;
    vars k and k;
    vars c0 and c0;
  enddef;
  def map between glycogen_phosphorylase and correction_factors for
    vars Kapp_GP and Kapp_GP;
  enddef;
  def map between glycogen_phosphorylase and differential_equations for
    vars G1P and G1P;
    vars Pi and Pi;
    vars Gly and Gly;
    vars flux_GPa and flux_GPa;
  enddef;
  def map between glycogen_phosphorylase and glycogen_phosphorylase_B for
    vars fracA and fracA;
    vars Vfgly and Vfgly;
  enddef;
  def map between glycogen_phosphorylase and ATPase for
    vars expno and expno;
  enddef;
  def map between glycogen_phosphorylase_B and correction_factors for
    vars Kapp_GP and Kapp_GP;
  enddef;
  def map between glycogen_phosphorylase_B and differential_equations for
    vars G1P and G1P;
    vars Pi and Pi;
    vars Gly and Gly;
    vars AMP and AMP;
    vars flux_GPb and flux_GPb;
  enddef;
  def map between PGLM and correction_factors for
    vars Kapp_PGLM and Kapp_PGLM;
  enddef;
  def map between PGLM and differential_equations for
    vars G1P and G1P;
    vars G6P and G6P;
    vars v_PGLM and v_PGLM;
  enddef;
  def map between PGI and correction_factors for
    vars Kapp_PGI and Kapp_PGI;
  enddef;
  def map between PGI and differential_equations for
    vars F6P and F6P;
    vars G6P and G6P;
    vars v_PGI and v_PGI;
  enddef;
  def map between PFK and correction_factors for
    vars Kapp_PFK and Kapp_PFK;
  enddef;
  def map between PFK and differential_equations for
    vars F6P and F6P;
    vars FBP and FBP;
    vars AMP and AMP;
    vars ADP and ADP;
    vars ATP and ATP;
    vars v_PFK and v_PFK;
  enddef;
  def map between ALD and correction_factors for
    vars Kapp_ALD and Kapp_ALD;
  enddef;
  def map between ALD and differential_equations for
    vars DHAP and DHAP;
    vars FBP and FBP;
    vars GAP and GAP;
    vars v_ALD and v_ALD;
  enddef;
  def map between TPI and correction_factors for
    vars Kapp_TPI and Kapp_TPI;
  enddef;
  def map between TPI and differential_equations for
    vars DHAP and DHAP;
    vars GAP and GAP;
    vars v_TPI and v_TPI;
  enddef;
  def map between G3PDH and correction_factors for
    vars Kapp_G3PDH and Kapp_G3PDH;
  enddef;
  def map between G3PDH and differential_equations for
    vars DHAP and DHAP;
    vars G3P and G3P;
    vars NAD and NAD;
    vars NADH and NADH;
    vars v_G3PDH and v_G3PDH;
  enddef;
  def map between GAPDH and correction_factors for
    vars Kapp_GAPDH and Kapp_GAPDH;
  enddef;
  def map between GAPDH and differential_equations for
    vars BPG and BPG;
    vars GAP and GAP;
    vars NAD and NAD;
    vars NADH and NADH;
    vars Pi and Pi;
    vars v_GAPDH and v_GAPDH;
  enddef;
  def map between PGK and correction_factors for
    vars Kapp_PGK and Kapp_PGK;
  enddef;
  def map between PGK and differential_equations for
    vars BPG and BPG;
    vars P3G and P3G;
    vars ADP and ADP;
    vars ATP and ATP;
    vars v_PGK and v_PGK;
  enddef;
  def map between PGM and correction_factors for
    vars Kapp_PGM and Kapp_PGM;
  enddef;
  def map between PGM and differential_equations for
    vars P2G and P2G;
    vars P3G and P3G;
    vars v_PGM and v_PGM;
  enddef;
  def map between ENOL and correction_factors for
    vars Kapp_ENOL and Kapp_ENOL;
  enddef;
  def map between ENOL and differential_equations for
    vars P2G and P2G;
    vars PEP and PEP;
    vars v_ENOL and v_ENOL;
  enddef;
  def map between PK and correction_factors for
    vars Kapp_PK and Kapp_PK;
  enddef;
  def map between PK and differential_equations for
    vars PYR and PYR;
    vars PEP and PEP;
    vars ADP and ADP;
    vars ATP and ATP;
    vars v_PK and v_PK;
  enddef;
  def map between LDH and correction_factors for
    vars Kapp_LDH and Kapp_LDH;
  enddef;
  def map between LDH and differential_equations for
    vars LAC and LAC;
    vars PYR and PYR;
    vars NAD and NAD;
    vars NADH and NADH;
    vars v_LDH and v_LDH;
  enddef;
  def map between ATPase and differential_equations for
    vars ATP and ATP;
    vars ATPase and ATPase;
  enddef;
  def map between creatine_kinase and correction_factors for
    vars Kapp_CK and Kapp_CK;
  enddef;
  def map between creatine_kinase and differential_equations for
    vars ATP and ATP;
    vars ADP and ADP;
    vars Cr and Cr;
    vars PCr and PCr;
    vars CK and CK;
  enddef;
  def map between adenylate_kinase and correction_factors for
    vars Kapp_ADK and Kapp_ADK;
  enddef;
  def map between adenylate_kinase and differential_equations for
    vars ATP and ATP;
    vars ADP and ADP;
    vars AMP and AMP;
    vars ADK and ADK;
  enddef;
  def map between buffer_capacity and creatine_kinase for
    vars CK and CK;
  enddef;
  def map between buffer_capacity and adenylate_kinase for
    vars ADK and ADK;
  enddef;
  def map between buffer_capacity and correction_factors for
    vars dNavg13DPGdH and dNavg13DPGdH;
    vars dNavg3PGdH and dNavg3PGdH;
    vars dNavg2PGdH and dNavg2PGdH;
    vars dNavgADPdH and dNavgADPdH;
    vars dNavgAMPdH and dNavgAMPdH;
    vars dNavgATPdH and dNavgATPdH;
    vars dNavgCRdH and dNavgCRdH;
    vars dNavgDHAPdH and dNavgDHAPdH;
    vars dNavgF6PdH and dNavgF6PdH;
    vars dNavgFDPdH and dNavgFDPdH;
    vars dNavgG1PdH and dNavgG1PdH;
    vars dNavgG3PdH and dNavgG3PdH;
    vars dNavgG6PdH and dNavgG6PdH;
    vars dNavgGAPdH and dNavgGAPdH;
    vars dNavgLACdH and dNavgLACdH;
    vars dNavgPCRdH and dNavgPCRdH;
    vars dNavgPEPdH and dNavgPEPdH;
    vars dNavgPYRdH and dNavgPYRdH;
    vars dNavgPidH and dNavgPidH;
    vars deltaH_ADK and deltaH_ADK;
    vars deltaH_ALD and deltaH_ALD;
    vars deltaH_CK and deltaH_CK;
    vars deltaH_ENOL and deltaH_ENOL;
    vars deltaH_G3PDH and deltaH_G3PDH;
    vars deltaH_GAPDH and deltaH_GAPDH;
    vars deltaH_GP and deltaH_GP;
    vars deltaH_LDH and deltaH_LDH;
    vars deltaH_PFK and deltaH_PFK;
    vars deltaH_PGI and deltaH_PGI;
    vars deltaH_PGK and deltaH_PGK;
    vars deltaH_PGLM and deltaH_PGLM;
    vars deltaH_PGM and deltaH_PGM;
    vars deltaH_PK and deltaH_PK;
    vars deltaH_TPI and deltaH_TPI;
    vars dNavg13DPGdmg and dNavg13DPGdmg;
    vars dNavg2PGdmg and dNavg2PGdmg;
    vars dNavg3PGdmg and dNavg3PGdmg;
    vars dNavgADPdmg and dNavgADPdmg;
    vars dNavgAMPdmg and dNavgAMPdmg;
    vars dNavgATPdmg and dNavgATPdmg;
    vars dNavgCRdmg and dNavgCRdmg;
    vars dNavgDHAPdmg and dNavgDHAPdmg;
    vars dNavgF6Pdmg and dNavgF6Pdmg;
    vars dNavgFDPdmg and dNavgFDPdmg;
    vars dNavgG1Pdmg and dNavgG1Pdmg;
    vars dNavgG3Pdmg and dNavgG3Pdmg;
    vars dNavgG6Pdmg and dNavgG6Pdmg;
    vars dNavgGAPdmg and dNavgGAPdmg;
    vars dNavgLACdmg and dNavgLACdmg;
    vars dNavgPCRdmg and dNavgPCRdmg;
    vars dNavgPEPdmg and dNavgPEPdmg;
    vars dNavgPYRdmg and dNavgPYRdmg;
    vars dNavgPidmg and dNavgPidmg;
    vars dmg2PGdmg and dmg2PGdmg;
    vars dmgATP2dmg and dmgATP2dmg;
    vars dmgADPdmg and dmgADPdmg;
    vars dmgAMPdmg and dmgAMPdmg;
    vars dmgDHAPdmg and dmgDHAPdmg;
    vars dmgFDPdmg and dmgFDPdmg;
    vars dmgG1Pdmg and dmgG1Pdmg;
    vars dmgG3Pdmg and dmgG3Pdmg;
    vars dmgLACdmg and dmgLACdmg;
    vars dmgPCRdmg and dmgPCRdmg;
    vars dmgPEPdmg and dmgPEPdmg;
    vars dmgPidmg and dmgPidmg;
    vars dmg2PGdpH and dmg2PGdpH;
    vars dmgADPdpH and dmgADPdpH;
    vars dmgAMPdpH and dmgAMPdpH;
    vars dmgATP2dpH and dmgATP2dpH;
    vars dmgDHAPdpH and dmgDHAPdpH;
    vars dmgFDPdpH and dmgFDPdpH;
    vars dmgG1PdpH and dmgG1PdpH;
    vars dmgG3PdpH and dmgG3PdpH;
    vars dmgLACdpH and dmgLACdpH;
    vars dmgPCRdpH and dmgPCRdpH;
    vars dmgPEPdpH and dmgPEPdpH;
    vars dmgPidpH and dmgPidpH;
  enddef;
  def map between buffer_capacity and glycogen_phosphorylase for
    vars flux_GPa and flux_GPa;
  enddef;
  def map between buffer_capacity and glycogen_phosphorylase_B for
    vars flux_GPb and flux_GPb;
  enddef;
  def map between buffer_capacity and ALD for
    vars v_ALD and v_ALD;
  enddef;
  def map between buffer_capacity and ENOL for
    vars v_ENOL and v_ENOL;
  enddef;
  def map between buffer_capacity and G3PDH for
    vars v_G3PDH and v_G3PDH;
  enddef;
  def map between buffer_capacity and GAPDH for
    vars v_GAPDH and v_GAPDH;
  enddef;
  def map between buffer_capacity and LDH for
    vars v_LDH and v_LDH;
  enddef;
  def map between buffer_capacity and PFK for
    vars v_PFK and v_PFK;
  enddef;
  def map between buffer_capacity and PGI for
    vars v_PGI and v_PGI;
  enddef;
  def map between buffer_capacity and PGK for
    vars v_PGK and v_PGK;
  enddef;
  def map between buffer_capacity and PGLM for
    vars v_PGLM and v_PGLM;
  enddef;
  def map between buffer_capacity and PGM for
    vars v_PGM and v_PGM;
  enddef;
  def map between buffer_capacity and PK for
    vars v_PK and v_PK;
  enddef;
  def map between buffer_capacity and TPI for
    vars v_TPI and v_TPI;
  enddef;
  def map between buffer_capacity and equilibrium_constants for
    vars c0 and c0;
  enddef;
  def map between buffer_capacity and differential_equations for
    vars PCr and PCr;
    vars Cr and Cr;
    vars NAD and NAD;
    vars NADH and NADH;
    vars ATP and ATP;
    vars ADP and ADP;
    vars AMP and AMP;
    vars Pi and Pi;
    vars Gly and Gly;
    vars G1P and G1P;
    vars G6P and G6P;
    vars F6P and F6P;
    vars FBP and FBP;
    vars DHAP and DHAP;
    vars G3P and G3P;
    vars GAP and GAP;
    vars BPG and BPG;
    vars P3G and P3G;
    vars P2G and P2G;
    vars PEP and PEP;
    vars PYR and PYR;
    vars LAC and LAC;
    vars protons_consumed and protons_consumed;
    vars pHODEterm1 and pHODEterm1;
    vars pHODEterm2 and pHODEterm2;
    vars denom_mgODE and denom_mgODE;
    vars RHSterm1_mgODE and RHSterm1_mgODE;
  enddef;
  def map between differential_equations and correction_factors for
    vars mg2PG and mg2PG;
    vars mgATP2 and mgATP2;
    vars mgADP and mgADP;
    vars mgAMP and mgAMP;
    vars mgDHAP and mgDHAP;
    vars mgFDP and mgFDP;
    vars mgG1P and mgG1P;
    vars mgG3P and mgG3P;
    vars mgLAC and mgLAC;
    vars mgPCR and mgPCR;
    vars mgPEP and mgPEP;
    vars mgPi and mgPi;
    vars Mg and mg;
  enddef;
enddef;
