<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="rf5pux2q3do" name="oneill_cell_death_fast"><component name="equation_1"><variable initial_value="0.99" name="A" units="conc"/><variable initial_value="0" name="D" units="conc"/><variable name="kf" units="per_sec"/><variable initial_value="0.00777" name="kb" units="per_sec"/><variable name="time" units="second"/><math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>A</ci></apply><apply><plus/><apply><times/><apply><minus/><ci>kf</ci></apply><ci>A</ci></apply><apply><times/><ci>kb</ci><apply><minus/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn><ci>A</ci></apply><ci>D</ci></apply></apply></apply></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>D</ci></apply><apply><times/><ci>kf</ci><apply><minus/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn><ci>A</ci></apply><ci>D</ci></apply></apply></apply><apply><eq/><ci>kf</ci><apply><times/><ci>kf_</ci><apply><exp/><apply><divide/><ci>T</ci><ci>Tk</ci></apply></apply><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn><ci>A</ci></apply></apply></apply><apply><eq/><ci>V</ci><apply><minus/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn><ci>A</ci></apply><ci>D</ci></apply></apply></math><variable initial_value="0.00333" name="kf_" units="per_conc_per_sec"/><variable initial_value="313" name="Tk" units="kelvin"/><variable initial_value="340" name="T" units="kelvin"/><variable name="V" units="conc"/></component><units name="per_sec"><unit exponent="-1" units="second"/></units><units base_units="yes" name="conc"/><units name="per_conc_per_sec"><unit exponent="-1" units="conc"/><unit exponent="-1" units="second"/></units><rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><rdf:Description rdf:about="#rf5pux2q3do"><simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n1"/></simulation></rdf:Description><rdf:Description rdf:nodeID="n2"><endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">3000</endingValue></rdf:Description><rdf:Description rdf:nodeID="n3"><rdf:rest><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/></rdf:rest><rdf:first><rdf:Description rdf:nodeID="n2"/></rdf:first></rdf:Description><rdf:Description rdf:nodeID="n1"><boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n3"/></boundIntervals></rdf:Description></rdf:RDF></model>