<?xml version="1.0"?>
<model 
    name="jung_10_lesions"
    xmlns="http://www.cellml.org/cellml/1.0#"
    xmlns:cmeta="http://www.cellml.org/metadata/1.0#"
    xmlns:cellml="http://www.cellml.org/cellml/1.0#"
    cmeta:id="rf5pux2q3do">



  <!-- Model Details -->
  <rdf:RDF
      xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"
      xmlns:dc="http://purl.org/dc/elements/1.1/"
      xmlns:cmeta="http://www.cellml.org/metadata/1.0#"
      xmlns:dcterms="http://purl.org/dc/terms/"
      xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#"
      xmlns:bqs="http://www.cellml.org/bqs/1.0#"
      xmlns:cs="http://www.cellml.org/metadata/simulation/1.0#">

    <rdf:Description rdf:about="">

      <dc:title>
	Jung 1986
      </dc:title>

      <dc:creator rdf:parseType="Resource">
        <vCard:N rdf:parseType="Resource">
          <vCard:Family>Hall</vCard:Family>
          <vCard:Given>Sheldon</vCard:Given>
          <vCard:Other>Karl</vCard:Other>
        </vCard:N>
        <vCard:EMAIL rdf:parseType="Resource">
          <rdf:value>sheldon.hall@eng.ox.ac.uk</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet" />
        </vCard:EMAIL>

        <vCard:ORG rdf:parseType="Resource">
          <vCard:Orgname>The University of Oxford</vCard:Orgname>
          <vCard:Orgunit>Institute of Biomedical Engineering</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
     
      <dcterms:created rdf:parseType="Resource">
        <dcterms:W3CDTF>2014-09-22</dcterms:W3CDTF>
      </dcterms:created>

      <dcterms:modified rdf:parseType="Resource">
        <dcterms:W3CDTF>2014-09-22</dcterms:W3CDTF>
      </dcterms:modified>

      <dc:publisher>
        The University of Oxford, Institute of Biomedical Engineering
      </dc:publisher>
    </rdf:Description>
  </rdf:RDF>


  <component name="jung_10_lesions">
    <variable initial_value="1" name="p" units="per_sec"/>
    <variable initial_value="1" name="c" units="per_sec"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P0</ci>
</apply>
<apply>
<times/>
<apply>
<minus/>
<ci>p</ci>
</apply>
<ci>P0</ci>
</apply>
</apply>
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P1</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<apply>
<times/>
<ci>p</ci>
<ci>P0</ci>
</apply>
<apply>
<times/>
<ci>p</ci>
<ci>P1</ci>
</apply>
</apply>
<apply>
<times/>
<ci>c</ci>
<ci>P1</ci>
</apply>
</apply>
</apply>
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P2</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<apply>
<times/>
<ci>p</ci>
<ci>P1</ci>
</apply>
<apply>
<times/>
<ci>p</ci>
<ci>P2</ci>
</apply>
</apply>
<apply>
<times/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn>
<ci>c</ci>
<ci>P2</ci>
</apply>
</apply>
</apply>
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P3</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<apply>
<times/>
<ci>p</ci>
<ci>P2</ci>
</apply>
<apply>
<times/>
<ci>p</ci>
<ci>P3</ci>
</apply>
</apply>
<apply>
<times/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">3</cn>
<ci>c</ci>
<ci>P3</ci>
</apply>
</apply>
</apply>
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P4</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<apply>
<times/>
<ci>p</ci>
<ci>P3</ci>
</apply>
<apply>
<times/>
<ci>p</ci>
<ci>P4</ci>
</apply>
</apply>
<apply>
<times/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">4</cn>
<ci>c</ci>
<ci>P4</ci>
</apply>
</apply>
</apply>
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P5</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<apply>
<times/>
<ci>p</ci>
<ci>P4</ci>
</apply>
<apply>
<times/>
<ci>p</ci>
<ci>P5</ci>
</apply>
</apply>
<apply>
<times/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">5</cn>
<ci>c</ci>
<ci>P5</ci>
</apply>
</apply>
</apply>
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P6</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<apply>
<times/>
<ci>p</ci>
<ci>P5</ci>
</apply>
<apply>
<times/>
<ci>p</ci>
<ci>P6</ci>
</apply>
</apply>
<apply>
<times/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">6</cn>
<ci>c</ci>
<ci>P6</ci>
</apply>
</apply>
</apply>
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P7</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<apply>
<times/>
<ci>p</ci>
<ci>P6</ci>
</apply>
<apply>
<times/>
<ci>p</ci>
<ci>P7</ci>
</apply>
</apply>
<apply>
<times/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">7</cn>
<ci>c</ci>
<ci>P7</ci>
</apply>
</apply>
</apply>
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P8</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<apply>
<times/>
<ci>p</ci>
<ci>P7</ci>
</apply>
<apply>
<times/>
<ci>p</ci>
<ci>P8</ci>
</apply>
</apply>
<apply>
<times/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">8</cn>
<ci>c</ci>
<ci>P8</ci>
</apply>
</apply>
</apply>
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P9</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<apply>
<times/>
<ci>p</ci>
<ci>P8</ci>
</apply>
<apply>
<times/>
<ci>p</ci>
<ci>P9</ci>
</apply>
</apply>
<apply>
<times/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">9</cn>
<ci>c</ci>
<ci>P9</ci>
</apply>
</apply>
</apply>
<apply>
<eq/>
<ci>A</ci>
<apply>
<plus/>
<ci>P0</ci>
<ci>P1</ci>
<ci>P2</ci>
<ci>P3</ci>
<ci>P4</ci>
<ci>P5</ci>
<ci>P6</ci>
<ci>P7</ci>
<ci>P8</ci>
<ci>P9</ci>
</apply>
</apply>
<apply>
<eq/>
<ci>S</ci>
<apply>
<times/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn>
<apply>
<exp/>
<apply>
<times/>
<apply>
<divide/>
<ci>p</ci>
<ci>c</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">1</cn>
<apply>
<times/>
<ci>c</ci>
<ci>time</ci>
</apply>
</apply>
<apply>
<exp/>
<apply>
<minus/>
<apply>
<times/>
<ci>c</ci>
<ci>time</ci>
</apply>
</apply>
</apply>
</apply>
</apply>
</apply>
</apply>
</apply>
<apply>
<eq/>
<ci>D</ci>
<apply>
<minus/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn>
<apply>
<plus/>
<ci>P0</ci>
<ci>P1</ci>
<ci>P2</ci>
<ci>P3</ci>
<ci>P4</ci>
<ci>P5</ci>
<ci>P6</ci>
<ci>P7</ci>
<ci>P8</ci>
<ci>P9</ci>
</apply>
</apply>
</apply>
    </math>
    <variable initial_value="1" name="P0" units="conc"/>
    <variable initial_value="0" name="P1" units="conc"/>
    <variable initial_value="0" name="P2" units="conc"/>
    <variable initial_value="0" name="P3" units="conc"/>
    <variable initial_value="0" name="P4" units="conc"/>
    <variable initial_value="0" name="P5" units="conc"/>
    <variable initial_value="0" name="P6" units="conc"/>
    <variable initial_value="0" name="P7" units="conc"/>
    <variable initial_value="0" name="P8" units="conc"/>
    <variable initial_value="0" name="P9" units="conc"/>
    <variable name="time" units="second"/>
    <variable name="A" units="conc"/>
    <variable name="D" units="conc"/>
    <variable name="S" units="conc"/>
  </component>
  <units name="per_sec">
    <unit exponent="-1" units="second"/>
  </units>
  <units base_units="yes" name="conc"/>
</model>
