// This CellML file was generated on 07/12/2009 at 13:44:52 using:
//
// COR (0.9.31.1333)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// title: Updated Faber and Rudy 2000 model with a corrected description of T-type calcium current
// creator: Family Tong; Given Wing Chiu; winnie.tong@ncl.ac.uk; Orgname Newcastle University; Orgunit Institute of Cellular Medicine
// reference: #Subject_citation; Pubmed_id 25360118; #citation; title Computational modeling of inhibition of voltage-gated Ca channels: identification of different effects on uterine and cardiac action potentials.; #Authors; #Author_1; Family Tong; Given WC; #Author_2; Family Ghouri; Given I; #Author_3; Family Taggart; Given M; Other J; volume 5; first_page 399; #Journal; title Frontiers in Physiology
// reference: #Subject_Model_keywords; #Model_keywords; #keywords; _1 electrophysiology; _2 excitation-contraction_coupling; _3 cardiac; _4 ventricular_myocyte; _5 calcium; _6 T-type calcium current; _7 tocolytics; subject_type keyword
def model faber_2000 as
  // Updated Faber and Rudy 2000 model with a corrected description of T-type calcium current
  //
  // Wing Chiu Tong
  //
  // Newcastle University
  //
  // Model Status
  //
  // In this version of the Faber and Rudy 2000 model of a mammalian ventricular cardiomyocyte, the ICaT is reformulated to describe the biophysical characteristics that are more commonly ascribed to this current. The CellML equations are validated using OpenCell and all units are consistent. The model can be run in both OpenCell (version 0.8) and OpenCOR (version 0.4) environments.
  //
  // Model Structure
  //
  // The original formulation of ICaT did not describe the current correctly so we replaced it with a new formulation. All the other model components, and the abstract below, remain the same as the original Faber and Rudy 2000 model (https://models.physiomeproject.org/exposure/55643f2114a2a463ada007deb9fc3913/faber_rudy_2000.cellml/view).
  //
  // ABSTRACT: Sodium overload of cardiac cells can accompany various pathologies and induce fatal cardiac arrhythmias. We investigate effects of elevated intracellular sodium on the cardiac action potential (AP) and on intracellular calcium using the Luo-Rudy model of a mammalian ventricular myocyte. The results are: 1) During rapid pacing, AP duration (APD) shortens in two phases, a rapid phase without Na(+) accumulation and a slower phase that depends on [Na(+)](i). 2) The rapid APD shortening is due to incomplete deactivation (accumulation) of I(Ks). 3) The slow phase is due to increased repolarizing currents I(NaK) and reverse-mode I(NaCa), secondary to elevated [Na(+)](i). 4) Na(+)-overload slows the rate of AP depolarization, allowing time for greater I(Ca(L)) activation; it also enhances reverse-mode I(NaCa). The resulting increased Ca(2+) influx triggers a greater [Ca(2+)](i) transient. 5) Reverse-mode I(NaCa) alone can trigger Ca(2+) release in a voltage and [Na(+)](i)-dependent manner. 6) During I(NaK) block, Na(+) and Ca(2+) accumulate and APD shortens due to enhanced reverse-mode I(NaCa); contribution of I(K(Na)) to APD shortening is negligible. By slowing AP depolarization (hence velocity) and shortening APD, Na(+)-overload acts to enhance inducibility of reentrant arrhythmias. Shortened APD with elevated [Ca(2+)](i) (secondary to Na(+)-overload) also predisposes the myocardium to arrhythmogenic delayed afterdepolarizations.
  //
  // The references for the papers containing this information are cited below:
  //
  // Computational modeling of inhibition of voltage-gated Ca channels: identification of different effects on uterine and cardiac action potentials. Wing-Chiu Tong, Iffath Ghouri and Michael J. Taggart, 2014, Frontiers in Physiology, 5, 399. PubMed ID: 25360118 (http://www.ncbi.nlm.nih.gov/pubmed/25360118)
  //
  // Action potential and contractility changes in [Na(+)](i) overloaded cardiac myocytes: a simulation study, Gregory M. Faber and Yoram Rudy, 2000, Biophysical Journal, 78, 2392-2404. PubMed ID: 10777735 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=10777735&dopt=Abstract)
  //
  // Side-by-side comparisons of the original and the new formulations of ICaT.
  //
  // Comparison of the original Faber & Ruddy (2000) (panel A, left hand side) and the new Tong et. al. (2014) (panel A, right hand side) ICaT formulations: simulations of (A) current tracings at different voltage steps and (B) the corresponding I-V plot.
  //
  // cell diagram of the shaw and viswanathan models showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram of the Faber and Rudy 2000 cardiac myocyte model.
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit ms_per_millivolt as
    unit ms;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_ms as
    unit millivolt {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit millivolt_per_ms as
    unit volt {pref: milli};
    unit ms {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit nanoS_per_cm2 as
    unit siemens {pref: nano};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit microF;
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit millimolar_per_ms as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;
  def unit litre_per_farad_millisecond as
    unit litre;
    unit farad {expo: -1};
    unit ms {expo: -1};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp cell as
    var V: millivolt {init: -85.2132259244751, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var I_st: microA_per_microF {pub: out};
    var time: ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Na: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_T: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_Kr: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_Ks: microA_per_microF {pub: in};
    var i_K_Na: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0015272
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var i_K_ATP: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_K1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_Kp: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_p_Ca: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Na_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Ca_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var i_NaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_ns_Ca: microA_per_microF {pub: in};
    var dVdt: microA_per_microF {pub: out};
    var stim_start: ms {init: 100};
    var stim_end: ms {init: 9000000};
    var stim_period: ms {init: 1000};
    var stim_duration: ms {init: 2};
    var stim_amplitude: microA_per_microF {init: -25.5};
    I_st = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    dVdt = -(i_Na+i_Ca_L+i_Ca_T+i_Kr+i_Ks+i_K_Na+i_K_ATP+i_to+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca+I_st);
    ode(V, time) = dVdt;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Na: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var E_Na: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var g_Na: milliS_per_microF {init: 16};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    E_Na = R*T/F*ln(Nao/Nai);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.00149150667653466, pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: millivolt {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    var time: ms {pub: in};
    E0_m = V+47.13{millivolt};
    alpha_m = sel
      case abs(E0_m) >= delta_m:
        0.32{per_millivolt_ms}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
      otherwise:
        3.2{per_ms};
    endsel;
    beta_m = 0.08{per_ms}*exp(-V/11{millivolt});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.98560077662336, pub: out};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_ms}*exp((80{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0{per_ms};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_ms}*exp(0.079{per_millivolt}*V)+310000{per_ms}*exp(0.35{per_millivolt}*V);
      otherwise:
        1{per_ms}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 0.990900988999238, pub: out};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        -(127140{per_millivolt_ms}*exp(0.2444{per_millivolt}*V)+3.474e-5{per_millivolt_ms}*exp(-0.04391{per_millivolt}*V))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_ms};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_ms}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_ms}*exp(-2.535e-7{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    ode(j, time) = alpha_j*(1{dimensionless}-j)-beta_j*j;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0048763
    var i_CaCa: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_CaK: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_CaNa: microA_per_microF {pub: out};
    var gamma_Nai: dimensionless {init: 0.75, pub: out};
    var gamma_Nao: dimensionless {init: 0.75, pub: out};
    var gamma_Ki: dimensionless {init: 0.75, pub: out};
    var gamma_Ko: dimensionless {init: 0.75, pub: out};
    var gamma_Cai: dimensionless {init: 1};
    var gamma_Cao: dimensionless {init: 0.341};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0048763
    var I_CaCa: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_CaK: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var I_CaNa: microA_per_microF;
    var P_Ca: litre_per_farad_millisecond {init: 0.00054};
    var P_Na: litre_per_farad_millisecond {init: 6.75e-7};
    var P_K: litre_per_farad_millisecond {init: 1.93e-7};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cai: millimolar {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cao: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ko: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ki: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    I_CaCa = P_Ca*sqr(2{dimensionless})*V*sqr(F)/(R*T)*(gamma_Cai*Cai*exp(2{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_CaNa = P_Na*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_CaK = P_K*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_CaCa = d*f*f_Ca*I_CaCa;
    i_CaNa = d*f*f_Ca*I_CaNa;
    i_CaK = d*f*f_Ca*I_CaK;
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 5.82475230952394e-06, pub: out};
    var alpha_d: per_ms;
    var beta_d: per_ms;
    var d_infinity: dimensionless;
    var tau_d: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    var E0_d: millivolt;
    E0_d = V+10{millivolt};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-E0_d/6.24{millivolt}));
    tau_d = sel
      case abs(E0_d) < 1e-5{millivolt}:
        1{ms}/(0.035{dimensionless}*6.24{dimensionless}*2{dimensionless});
      otherwise:
        1{ms}*d_infinity*(1{dimensionless}-exp(-E0_d/6.24{millivolt}))/(0.035{per_millivolt}*E0_d);
    endsel;
    alpha_d = d_infinity/tau_d;
    beta_d = (1{dimensionless}-d_infinity)/tau_d;
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 0.997765766850281, pub: out};
    var alpha_f: per_ms;
    var beta_f: per_ms;
    var f_infinity: dimensionless;
    var tau_f: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+35.06{millivolt})/8.6{millivolt}))+0.6{dimensionless}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_f = 1{ms}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_millivolt}*(V+10{millivolt})))+0.02{dimensionless});
    alpha_f = f_infinity/tau_f;
    beta_f = (1{dimensionless}-f_infinity)/tau_f;
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: millimolar {init: 0.0006};
    var V: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    f_Ca = 1{dimensionless}/(1{dimensionless}+Cai/Km_Ca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_T: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g_CaT: milliS_per_microF {init: 0.056};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var E_Ca: millivolt {pub: in};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var b: dimensionless {priv: in};
    var g: dimensionless {priv: in};
    i_Ca_T = g_CaT*b*b*g*(V-E_Ca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel_b_gate as
    var b: dimensionless {init: 0.00087306703919284, pub: out};
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    var b_inf: dimensionless;
    var tau_b: ms;
    b_inf = 1.{dimensionless}/(1.{dimensionless}+exp(-(V+50.{millivolt})/5.{millivolt}));
    tau_b = 5.{ms}/(1.068{dimensionless}*exp((V+16.3{millivolt})/30.{millivolt})+1.068{dimensionless}*exp(-(V+16.3{millivolt})/30.{millivolt}));
    ode(b, time) = (b_inf-b)/tau_b;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel_g_gate as
    var g: dimensionless {init: 0.964644023670238, pub: out};
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    var g_inf: dimensionless;
    var tau_g: ms;
    g_inf = 1.{dimensionless}/(1.{dimensionless}+exp((V+61.{millivolt})/5.{millivolt}));
    tau_g = 5.{ms}/(0.015{dimensionless}*exp(-(V+71.7{millivolt})/83.3{millivolt})+0.015{dimensionless}*exp((V+71.7{millivolt})/15.4{millivolt}));
    ode(g, time) = (g_inf-g)/tau_g;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp rapid_delayed_rectifier_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_Kr: microA_per_microF {pub: out};
    var g_Kr: milliS_per_microF;
    var G_Kr: milliS_per_microF {init: 0.02614};
    var Rect: dimensionless;
    var E_K: millivolt {pub: in};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var xr: dimensionless {priv: in};
    g_Kr = G_Kr*sqrt(Ko/5.4{millimolar});
    Rect = 1{dimensionless}/(1{dimensionless}+exp((V+9{millivolt})/22.4{millivolt}));
    i_Kr = g_Kr*xr*Rect*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp rapid_delayed_rectifier_potassium_current_xr_gate as
    var xr: dimensionless {init: 0.000204664013529778, pub: out};
    var xr_infinity: dimensionless;
    var tau_xr: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    xr_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+21.5{millivolt})/7.5{millivolt}));
    tau_xr = 1{ms}/(0.00138{per_millivolt}*(V+14.2{millivolt})/(1{dimensionless}-exp(-0.123{per_millivolt}*(V+14.2{millivolt})))+0.00061{per_millivolt}*(V+38.9{millivolt})/(exp(0.145{per_millivolt}*(V+38.9{millivolt}))-1{dimensionless}));
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp slow_delayed_rectifier_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_Ks: microA_per_microF {pub: out};
    var g_Ks: milliS_per_microF;
    var G_Ks: milliS_per_microF {init: 0.433};
    var E_Ks: millivolt;
    var PNaK: dimensionless {init: 0.01833};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var xs1: dimensionless {priv: in};
    var xs2: dimensionless {priv: in};
    E_Ks = R*T/F*ln((Ko+PNaK*Nao)/(Ki+PNaK*Nai));
    g_Ks = G_Ks*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/Cai, 1.4{dimensionless})));
    i_Ks = g_Ks*xs1*xs2*(V-E_Ks);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp slow_delayed_rectifier_potassium_current_xs1_gate as
    var xs1: dimensionless {init: 0.00661079879810885, pub: out};
    var xs1_infinity: dimensionless;
    var tau_xs1: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    xs1_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{millivolt})/16.7{millivolt}));
    tau_xs1 = 1{ms}/(7.19e-5{per_millivolt}*(V+30{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V+30{millivolt})))+0.000131{per_millivolt}*(V+30{millivolt})/(exp(0.0687{per_millivolt}*(V+30{millivolt}))-1{dimensionless}));
    ode(xs1, time) = (xs1_infinity-xs1)/tau_xs1;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp slow_delayed_rectifier_potassium_current_xs2_gate as
    var xs2: dimensionless {init: 0.0302962988340647, pub: out};
    var xs2_infinity: dimensionless;
    var tau_xs2: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    xs2_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{millivolt})/16.7{millivolt}));
    tau_xs2 = 4{ms}/(7.19e-5{per_millivolt}*(V+30{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V+30{millivolt})))+0.000131{per_millivolt}*(V+30{millivolt})/(exp(0.0687{per_millivolt}*(V+30{millivolt}))-1{dimensionless}));
    ode(xs2, time) = (xs2_infinity-xs2)/tau_xs2;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0022841
  def comp time_independent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var i_K1: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var E_K: millivolt {priv: out, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var g_K1: milliS_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var G_K1: milliS_per_microF {init: 0.75};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = G_K1*sqrt(Ko/5.4{millimolar});
    E_K = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0022841
  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    alpha_K1 = 1.02{per_ms}/(1{dimensionless}+exp(0.2385{per_millivolt}*(V-E_K-59.215{millivolt})));
    beta_K1 = 1{per_ms}*(0.49124{dimensionless}*exp(0.08032{per_millivolt}*(V-E_K+5.476{millivolt}))+exp(0.06175{per_millivolt}*(V-E_K-594.31{millivolt})))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(V-E_K+4.753{millivolt})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp plateau_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_Kp: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var g_Kp: milliS_per_microF {init: 0.00552};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var Kp: dimensionless;
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var E_K: millivolt {pub: in};
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
    i_Kp = g_Kp*Kp*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp sodium_activated_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_K_Na: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var g_K_Na: milliS_per_microF {init: 0.12848};
    var nKNa: dimensionless {init: 2.8};
    var pona: dimensionless;
    var pov: dimensionless;
    var kdKNa: millimolar {init: 66};
    var V: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    pona = 0.85{dimensionless}/(1{dimensionless}+pow(kdKNa/Nai, nKNa));
    pov = 0.8{dimensionless}-0.65{dimensionless}/(1{dimensionless}+exp((V+125{millivolt})/15{millivolt}));
    i_K_Na = g_K_Na*pona*pov*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0015272
  // isVersionOf: http://identifiers.org/go/GO:0005241
  def comp ATP_sensitive_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0015272
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var i_K_ATP: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0015272
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var g_K_ATP: milliS_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0015272
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var i_K_ATP_on: dimensionless {init: 1};
    var nATP: dimensionless {init: 0.24};
    var nicholsarea: dimensionless {init: 5e-5};
    var ATPi: millimolar {init: 3};
    var hATP: dimensionless {init: 2};
    var kATP: millimolar {init: 0.00025};
    var pATP: dimensionless;
    var GKbaraATP: milliS_per_microF;
    var V: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    g_K_ATP = i_K_ATP_on*0.000193{milliS_per_microF}/nicholsarea;
    pATP = 1{dimensionless}/(1{dimensionless}+pow(ATPi/kATP, hATP));
    GKbaraATP = g_K_ATP*pATP*pow(Ko/4{millimolar}, nATP);
    i_K_ATP = GKbaraATP*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_current as
    var i_to: microA_per_microF {pub: out};
    var g_to: milliS_per_microF;
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: ms {priv: out, pub: in};
    var rvdv: dimensionless;
    var zdv: dimensionless {priv: in};
    var ydv: dimensionless {priv: in};
    g_to = 0{dimensionless}*0.5{milliS_per_microF};
    rvdv = exp(V/100{millivolt});
    i_to = g_to*pow(zdv, 3{dimensionless})*ydv*rvdv*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_current_zdv_gate as
    var zdv: dimensionless {init: 0.0144611004317138, pub: out};
    var alpha_zdv: per_ms;
    var beta_zdv: per_ms;
    var tau_zdv: ms;
    var zdv_ss: dimensionless;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_zdv = 10{per_ms}*exp((V-40{millivolt})/25{millivolt})/(1{dimensionless}+exp((V-40{millivolt})/25{millivolt}));
    beta_zdv = 10{per_ms}*exp(-(V+90{millivolt})/25{millivolt})/(1{dimensionless}+exp(-(V+90{millivolt})/25{millivolt}));
    tau_zdv = 1{dimensionless}/(alpha_zdv+beta_zdv);
    zdv_ss = alpha_zdv/(alpha_zdv+beta_zdv);
    ode(zdv, time) = (zdv_ss-zdv)/tau_zdv;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_current_ydv_gate as
    var ydv: dimensionless {init: 0.999945263077137, pub: out};
    var alpha_ydv: per_ms;
    var beta_ydv: per_ms;
    var tau_ydv: ms;
    var ydv_ss: dimensionless;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_ydv = 0.015{per_ms}/(1{dimensionless}+exp((V+60{millivolt})/5{millivolt}));
    beta_ydv = 0.1{per_ms}*exp((V+25{millivolt})/5{millivolt})/(1{dimensionless}+exp((V+25{millivolt})/5{millivolt}));
    tau_ydv = 1{dimensionless}/(alpha_ydv+beta_ydv);
    ydv_ss = alpha_ydv/(alpha_ydv+beta_ydv);
    ode(ydv, time) = (ydv_ss-ydv)/tau_ydv;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0070509
  // isVersionOf: http://identifiers.org/go/GO:0070588
  // isVersionOf: http://identifiers.org/go/GO:0015085
  // isVersionOf: http://identifiers.org/go/GO:0006816
  // isVersionOf: http://identifiers.org/go/GO:0060402
  def comp sarcolemmal_calcium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0070509
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0060402
    var i_p_Ca: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0070509
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0060402
    var K_mpCa: millimolar {init: 0.0005};
    // isVersionOf: http://identifiers.org/go/GO:0070509
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0060402
    var I_pCa: microA_per_microF {init: 1.15};
    var Cai: millimolar {pub: in};
    i_p_Ca = I_pCa*Cai/(K_mpCa+Cai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp sodium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Na_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_Nab: milliS_per_microF {init: 0.004};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp calcium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Ca_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_Cab: milliS_per_microF {init: 0.003016};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var E_Ca: millivolt {pub: out};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0005391
  // isVersionOf: http://identifiers.org/go/GO:0008511
  def comp sodium_potassium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0008511
    var i_NaK: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0008511
    var I_NaK: microA_per_microF {init: 2.25};
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ko: millimolar {pub: in};
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67.3{millimolar})-1{dimensionless});
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK = I_NaK*f_NaK*1{dimensionless}/(1{dimensionless}+sqr(K_mNai/Nai))*Ko/(Ko+K_mKo);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp non_specific_calcium_activated_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_ns_Ca: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_ns_Na: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_ns_K: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var P_ns_Ca: litre_per_farad_millisecond;
    var gamma_Nai: dimensionless {pub: in};
    var gamma_Nao: dimensionless {pub: in};
    var gamma_Ki: dimensionless {pub: in};
    var gamma_Ko: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_ns_Na: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_ns_K: microA_per_microF;
    var K_m_ns_Ca: millimolar {init: 0.0012};
    var time: ms {pub: in};
    var Cai: millimolar {pub: in};
    var V: millivolt {pub: in};
    P_ns_Ca = 1.75e-7{litre_per_farad_millisecond};
    I_ns_Na = P_ns_Ca*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_ns_K = P_ns_Ca*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_ns_Na = I_ns_Na*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_K = I_ns_K*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_Ca = i_ns_Na+i_ns_K;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp Na_Ca_exchanger as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: out};
    var c1: microA_per_microF {init: 0.00025};
    var c2: dimensionless {init: 0.0001};
    var gamma: dimensionless {init: 0.15};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    i_NaCa = c1*exp((gamma-1{dimensionless})*V*F/(R*T))*(exp(V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-pow(Nao, 3{dimensionless})*Cai)/(1{millimolar4}+c2*exp((gamma-1{dimensionless})*V*F/(R*T))*(exp(V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao+pow(Nao, 3{dimensionless})*Cai));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp calcium_dynamics as
    var i_rel: millimolar_per_ms {pub: out};
    var i_up: millimolar_per_ms {pub: out};
    var i_leak: millimolar_per_ms {pub: out};
    var i_tr: millimolar_per_ms {pub: out};
    var G_rel: per_ms;
    var G_rel_Viswanathan: per_ms;
    var G_rel_max: per_ms {init: 60};
    var G_rel_overload: per_ms {init: 4};
    var tau_tr: ms {init: 180};
    var K_mrel: millimolar {init: 0.0008};
    var delta_Ca_ith: millimolar {init: 0.00018};
    var CSQN_max: millimolar {init: 10};
    var K_mCSQN: millimolar {init: 0.8};
    var K_mup: millimolar {init: 0.00092};
    var K_leak: per_ms;
    var I_up: millimolar_per_ms {init: 0.00875};
    var Ca_NSR_max: millimolar {init: 15};
    var time: ms {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: millimolar {init: 0.000115992251742132, pub: out};
    var Cao: millimolar {init: 1.8, pub: out};
    var Ca_JSR: millimolar {init: 1.10786985002835, pub: out};
    var Ca_NSR: millimolar {init: 1.74647588622419, pub: out};
    var V_myo: micro_litre {pub: in};
    var A_cap: cm2 {pub: in};
    var V_JSR: micro_litre {pub: in};
    var V_NSR: micro_litre {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_CaCa: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Ca_T: microA_per_microF {pub: in};
    var K_mTn: millimolar {init: 0.0005};
    var K_mCMDN: millimolar {init: 0.00238};
    var Tn_max: millimolar {init: 0.07};
    var CMDN_max: millimolar {init: 0.05};
    var dVdt: microA_per_microF {pub: in};
    var APtrack: dimensionless {init: 1.05741719313009e-195};
    var APtrack2: dimensionless {init: 5.84534012971144e-195};
    var APtrack3: dimensionless {init: 0.000129513799736416};
    var Cainfluxtrack: millimolar {init: 2.82367737273297e-196};
    var OVRLDtrack: dimensionless {init: 0};
    var OVRLDtrack2: dimensionless {init: 0};
    var OVRLDtrack3: dimensionless {init: 0};
    var CSQNthresh: dimensionless {init: 0.7};
    var Logicthresh: dimensionless {init: 0.98};
    var RyRopen: dimensionless;
    var RyRclose: dimensionless;
    ode(APtrack, time) = sel
      case dVdt > 150{millivolt_per_ms}:
        100{per_ms}*(1{dimensionless}-APtrack)-0.5{per_ms}*APtrack;
      otherwise:
        -0.5{per_ms}*APtrack;
    endsel;
    ode(APtrack2, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100{per_ms}*(1{dimensionless}-APtrack2)-0.5{per_ms}*APtrack2;
      otherwise:
        -0.5{per_ms}*APtrack2;
    endsel;
    ode(APtrack3, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100{per_ms}*(1{dimensionless}-APtrack3)-0.5{per_ms}*APtrack3;
      otherwise:
        -0.01{per_ms}*APtrack3;
    endsel;
    ode(Cainfluxtrack, time) = sel
      case APtrack > 0.2{dimensionless}:
        -1{microF_per_cm2}*A_cap*(i_CaCa+i_Ca_T-2{dimensionless}*i_NaCa+i_p_Ca+i_Ca_b)/(2{dimensionless}*V_myo*F);
      case (APtrack2 > 0.01{dimensionless}) and (APtrack <= 0.2{dimensionless}):
        0{millimolar_per_ms};
      otherwise:
        -0.5{per_ms}*Cainfluxtrack;
    endsel;
    ode(OVRLDtrack, time) = sel
      case (1{dimensionless}/(1{dimensionless}+K_mCSQN/Ca_JSR) > CSQNthresh) and (OVRLDtrack3 < 0.37{dimensionless}) and (APtrack3 < 0.37{dimensionless}):
        50{per_ms}*(1{dimensionless}-OVRLDtrack);
      otherwise:
        -0.5{per_ms}*OVRLDtrack;
    endsel;
    ode(OVRLDtrack2, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack2 < Logicthresh):
        50{per_ms}*(1{dimensionless}-OVRLDtrack2);
      otherwise:
        -0.5{per_ms}*OVRLDtrack2;
    endsel;
    ode(OVRLDtrack3, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack3 < Logicthresh):
        50{per_ms}*(1{dimensionless}-OVRLDtrack3);
      otherwise:
        -0.01{per_ms}*OVRLDtrack3;
    endsel;
    G_rel_Viswanathan = sel
      case Cainfluxtrack > delta_Ca_ith:
        G_rel_max*(Cainfluxtrack-delta_Ca_ith)/(K_mrel+Cainfluxtrack-delta_Ca_ith)*(1{dimensionless}-APtrack2)*APtrack2;
      case (Cainfluxtrack <= delta_Ca_ith) and (OVRLDtrack2 > 0{dimensionless}):
        G_rel_overload*(1{dimensionless}-OVRLDtrack2)*OVRLDtrack2;
      otherwise:
        0{per_ms};
    endsel;
    RyRopen = 1{dimensionless}/(1{dimensionless}+exp(2{dimensionless})*APtrack2);
    RyRclose = 1{dimensionless}-RyRopen;
    G_rel = RyRopen*RyRclose*150{per_ms}/(1{dimensionless}+exp((i_CaCa+i_Ca_T-2{dimensionless}*i_NaCa+i_p_Ca+i_Ca_b+5{microA_per_microF})/0.9{microA_per_microF}));
    i_rel = G_rel*(Ca_JSR-Cai);
    i_up = I_up*Cai/(Cai+K_mup);
    K_leak = I_up/Ca_NSR_max;
    i_leak = K_leak*Ca_NSR;
    i_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    ode(Ca_JSR, time) = 1{dimensionless}/(1{dimensionless}+CSQN_max*K_mCSQN/sqr(K_mCSQN+Ca_JSR))*(i_tr-i_rel);
    ode(Ca_NSR, time) = -i_tr*V_JSR/V_NSR-i_leak+i_up;
    ode(Cai, time) = 1{dimensionless}/(1{dimensionless}+CMDN_max*K_mCMDN/sqr(K_mCMDN+Cai)+Tn_max*K_mTn/sqr(K_mTn+Cai))*(-1{microF_per_cm2}*A_cap*(i_CaCa+i_Ca_T-2{dimensionless}*i_NaCa+i_p_Ca+i_Ca_b)/(2{dimensionless}*V_myo*F)+i_rel*V_JSR/V_myo+(i_leak-i_up)*V_NSR/V_myo);
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
  // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
  def comp ionic_concentrations as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: millimolar {init: 13.2866380281237, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: millimolar {init: 140, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ki: millimolar {init: 141.139802226909, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ko: millimolar {init: 5.4, pub: out};
    var A_cap: cm2 {pub: in};
    var V_myo: micro_litre {pub: in};
    var time: ms {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_CaNa: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_ns_Na: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_CaK: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_K_Na: microA_per_microF {pub: in};
    var i_K_ATP: microA_per_microF {pub: in};
    var i_ns_K: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    var I_st: microA_per_microF {pub: in};
    ode(Nai, time) = -1{microF_per_cm2}*(i_Na+i_CaNa+i_Na_b+i_ns_Na+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless})*A_cap/(V_myo*F);
    ode(Ki, time) = -1{microF_per_cm2}*(I_st+i_CaK+i_Kr+i_Ks+i_K1+i_Kp+i_K_Na+i_K_ATP+i_to+i_ns_K+(-i_NaK*2{dimensionless}))*A_cap/(V_myo*F);
  enddef;

  def comp geometry as
    var preplength: mm {init: 0.1};
    var radius: mm {init: 0.011};
    var volume: micro_litre;
    var V_myo: micro_litre {pub: out};
    var V_JSR: micro_litre {pub: out};
    var V_NSR: micro_litre {pub: out};
    var A_cap: cm2 {init: 0.0001534, pub: out};
    volume = pi*preplength*sqr(radius);
    V_myo = 0.68{dimensionless}*volume;
    V_JSR = 0.0048{dimensionless}*volume;
    V_NSR = 0.0552{dimensionless}*volume;
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def group as containment for
    comp cell incl
      comp geometry;
      comp transmembrane_currents incl
        comp fast_sodium_current incl
          comp fast_sodium_current_m_gate;
          comp fast_sodium_current_h_gate;
          comp fast_sodium_current_j_gate;
        endcomp;
        comp L_type_Ca_channel incl
          comp L_type_Ca_channel_d_gate;
          comp L_type_Ca_channel_f_gate;
          comp L_type_Ca_channel_f_Ca_gate;
        endcomp;
        comp T_type_Ca_channel incl
          comp T_type_Ca_channel_b_gate;
          comp T_type_Ca_channel_g_gate;
        endcomp;
        comp rapid_delayed_rectifier_potassium_current incl
          comp rapid_delayed_rectifier_potassium_current_xr_gate;
        endcomp;
        comp slow_delayed_rectifier_potassium_current incl
          comp slow_delayed_rectifier_potassium_current_xs1_gate;
          comp slow_delayed_rectifier_potassium_current_xs2_gate;
        endcomp;
        comp time_independent_potassium_current incl
          comp time_independent_potassium_current_K1_gate;
        endcomp;
        comp transient_outward_current incl
          comp transient_outward_current_zdv_gate;
          comp transient_outward_current_ydv_gate;
        endcomp;
        comp Na_Ca_exchanger;
        comp plateau_potassium_current;
        comp sodium_activated_potassium_current;
        comp ATP_sensitive_potassium_current;
        comp sodium_background_current;
        comp calcium_background_current;
        comp sodium_potassium_pump;
        comp non_specific_calcium_activated_current;
      endcomp;
      comp intracellular_currents incl
        comp sarcolemmal_calcium_pump;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp ionic_concentrations;
        comp calcium_dynamics;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_b_gate;
      comp T_type_Ca_channel_g_gate;
    endcomp;
    comp rapid_delayed_rectifier_potassium_current incl
      comp rapid_delayed_rectifier_potassium_current_xr_gate;
    endcomp;
    comp slow_delayed_rectifier_potassium_current incl
      comp slow_delayed_rectifier_potassium_current_xs1_gate;
      comp slow_delayed_rectifier_potassium_current_xs2_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_zdv_gate;
      comp transient_outward_current_ydv_gate;
    endcomp;
  enddef;
  def map between cell and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between cell and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and T_type_Ca_channel for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between cell and rapid_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between cell and slow_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and sodium_activated_potassium_current for
    vars V and V;
    vars i_K_Na and i_K_Na;
  enddef;
  def map between cell and ATP_sensitive_potassium_current for
    vars V and V;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between cell and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between cell and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between cell and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between cell and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between cell and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell and non_specific_calcium_activated_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_ns_Ca and i_ns_Ca;
  enddef;
  def map between cell and ionic_concentrations for
    vars F and F;
    vars I_st and I_st;
  enddef;
  def map between cell and calcium_dynamics for
    vars F and F;
    vars dVdt and dVdt;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_CaNa and i_CaNa;
    vars i_CaK and i_CaK;
  enddef;
  def map between L_type_Ca_channel and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_CaCa and i_CaCa;
  enddef;
  def map between T_type_Ca_channel and calcium_dynamics for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_Ks and i_Ks;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and calcium_dynamics for
    vars Cai and Cai;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars i_Kr and i_Kr;
  enddef;
  def map between transient_outward_current and ionic_concentrations for
    vars i_to and i_to;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_activated_potassium_current and ionic_concentrations for
    vars Nai and Nai;
    vars i_K_Na and i_K_Na;
  enddef;
  def map between ATP_sensitive_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between sodium_activated_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between ATP_sensitive_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between transient_outward_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and calcium_dynamics for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between T_type_Ca_channel and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
  enddef;
  def map between non_specific_calcium_activated_current and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
  enddef;
  def map between L_type_Ca_channel and non_specific_calcium_activated_current for
    vars gamma_Nao and gamma_Nao;
    vars gamma_Nai and gamma_Nai;
    vars gamma_Ko and gamma_Ko;
    vars gamma_Ki and gamma_Ki;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_b_gate for
    vars b and b;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_g_gate for
    vars g and g;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_xr_gate for
    vars xr and xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs1_gate for
    vars xs1 and xs1;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs2_gate for
    vars xs2 and xs2;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K and E_K;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_ydv_gate for
    vars ydv and ydv;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_zdv_gate for
    vars zdv and zdv;
    vars time and time;
    vars V and V;
  enddef;
  def map between geometry and ionic_concentrations for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
  enddef;
  def map between calcium_dynamics and geometry for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
    vars V_JSR and V_JSR;
    vars V_NSR and V_NSR;
  enddef;
enddef;
// #id_00088
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/chebi/CHEBI:38634
// #id_00089
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00090
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0022840
// #id_00091
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/chebi/CHEBI:38634
// #id_00092
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00093
// isVersionOf: http://identifiers.org/go/GO:0005890
// isVersionOf: http://identifiers.org/go/GO:0005391
// #id_00094
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00095
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00096
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// #id_00097
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00098
// isVersionOf: http://identifiers.org/go/GO:0015272
// #id_00099
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00100
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00101
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00102
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00103
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00104
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00105
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00106
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00107
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00108
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00109
// isVersionOf: http://identifiers.org/chebi/CHEBI:26216
// #id_00110
// isVersionOf: http://identifiers.org/chebi/CHEBI:26216
