<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 1/14/2011 at 9:35:57 at AM using:

COR (0.9.31.1409)
Copyright 2002-2011 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model name="conradie_2009" cmeta:id="conradie_2009" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Restriction point control of the mammalian cell cycle via the cyclin E/Cdk2:p27 complex</title>
				<author>
					<firstname>Mona</firstname>
					<surname>Zhu</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>This model has been built using the expressions found in the Conradie's 2010 paper "Restriction point control of the mammalian cell cycle via the cyclin E/Cdk2:p27 complex". This model was produced using the parameter values on page 360. This file is known to run on COR 0.9 and Open Cell.</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>Numerous top-down kinetic models have been constructed to describe the cell cycle. These models have typically been constructed, validated and analyzed using model species (molecular intermediates and proteins) and phenotypic observations, and therefore do not focus on the individual model processes (reaction steps). We have developed a method to: (a) quantify the importance of each of the reaction steps in a kinetic model for the positioning of a switch point [i.e. the restriction point (RP)]; (b) relate this control of reaction steps to their effects on molecular species, using sensitivity and co-control analysis; and thereby (c) go beyond a correlation towards a causal relationship between molecular species and effects. The method is generic and can be applied to responses of any type, but is most useful for the analysis of dynamic and emergent responses such as switch points in the cell cycle. The strength of the analysis is illustrated for an existing mammalian cell cycle model focusing on the RP [Novak B, Tyson J (2004) J Theor Biol230, 563-579]. The reactions in the model with the highest RP control were those involved in: (a) the interplay between retinoblastoma protein and E2F transcription factor; (b) those synthesizing the delayed response genes and cyclin D/Cdk4 in response to growth signals; (c) the E2F-dependent cyclin E/Cdk2 synthesis reaction; as well as (d) p27 formation reactions. Nine of the 23 intermediates were shown to have a good correlation between their concentration control and RP control. Sensitivity and co-control analysis indicated that the strongest control of the RP is mediated via the cyclin E/Cdk2:p27 complex concentration. Any perturbation of the RP could be related to a change in the concentration of this complex; apparent effects of other molecular species were indirect and always worked through cyclin E/Cdk2:p27, indicating a causal relationship between this complex and the positioning of the RP.</para>
				<para>Restriction point control of the mammalian cell cycle via the cyclin E/Cdk2:p27 complex, Conradie R, Bruggeman F J, Ciliberto A, Csikasz-Nagy A, Novak B, Westerhoff H V, Snoep J L <emphasis>FEB Journal</emphasis>, 277, 357-367<ulink url="http://www.ncbi.nlm.nih.gov/pubmed/20015233">PubMed ID: 20015233</ulink>
				</para>
				<informalfigure float="0" id="______">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>Model Diagram</title>
							</objectinfo>
							<imagedata fileref="conradie_2009.png"/>
						</imageobject>
					</mediaobject>
					<caption>Time course of the mammalian cell division cycle. A time integration for 30 h is shown for six of the intermediates of the system. The G1-, S/G2- and M-phases for one cell cycle are indicated in the graph. The RP is also depicted in the G1-phase. It should be noted that, in contrast to other switch points in the model, the RP is not a hard coded event (i.e. it is not an explicit function, but rather an emergent property of the model), and it is empirically defined as the last time point where, upon cycloheximide (CHX) treatment, the cell would not finish the division cycle it started with. The CHX treatment was mimicked in the model by reducing the translation efficiency of the ribosomes [e or Eps(t)], a parameter found in all synthesis steps of the model, from 1.0 to 0.5. This definition was taken from the original publication in which the model was described [5].</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		<rdf:Description rdf:about="#conradie_2009">
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			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
				<bqs:Pubmed_id>20015233</bqs:Pubmed_id>
				<bqs:JournalArticle rdf:parseType="Resource">
					<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
						<rdf:Seq>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Conradie</vCard:Family>
										<vCard:Given>Riaan</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Bruggeman</vCard:Family>
										<vCard:Given>Frank J.</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Ciliberto</vCard:Family>
										<vCard:Given>Andrea</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Csikasz-Nagy</vCard:Family>
										<vCard:Given>Attila</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Novak</vCard:Family>
										<vCard:Given>Bela</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Westerhoff</vCard:Family>
										<vCard:Given>Hans V.</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Snoep</vCard:Family>
										<vCard:Given>Jack L.</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
						</rdf:Seq>
					</dc:creator>
					<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Restriction point control of the mammalian cell cycle via the cyclin E/Cdk2:p27 complex</dc:title>
					<dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
						<dcterms:W3CDTF>Jan, 2010</dcterms:W3CDTF>
					</dcterms:issued>
					<bqs:Journal rdf:parseType="Resource">
						<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">FEB Journal</dc:title>
					</bqs:Journal>
					<bqs:volume>277</bqs:volume>
					<bqs:first_page>357</bqs:first_page>
					<bqs:last_page>367</bqs:last_page>
				</bqs:JournalArticle>
			</bqs:reference>
		</rdf:Description>
	</rdf:RDF>   <units xmlns="http://www.cellml.org/cellml/1.0#" name="hour">
      <unit units="second" multiplier="3600"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_hour">
      <unit units="hour" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="hour" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="A">
      <variable name="eps" units="dimensionless" public_interface="in"/>
      <variable name="K1" units="per_hour" initial_value="0.6"/>
      <variable name="K1a" units="per_hour" initial_value="0.1"/>
      <variable name="K2" units="per_hour" initial_value="20"/>
      <variable name="K2a" units="per_hour" initial_value="0.05"/>
      <variable name="K2aa" units="per_hour" initial_value="1"/>
      <variable name="K3" units="per_hour" initial_value="140"/>
      <variable name="K3a" units="per_hour" initial_value="7.5"/>
      <variable name="K4" units="per_hour" initial_value="40"/>
      <variable name="J1" units="dimensionless" initial_value="0.1"/>
      <variable name="J3" units="dimensionless" initial_value="0.01"/>
      <variable name="J4" units="dimensionless" initial_value="0.04"/>
      <variable name="v_20" units="per_hour"/>
      <variable name="v_21" units="per_hour"/>
      <variable name="v_42" units="per_hour"/>
      <variable name="v_19" units="per_hour"/>
      <variable name="GA" units="dimensionless" initial_value="0.3"/>
      <variable name="GB" units="dimensionless" initial_value="1"/>
      <variable name="GE" units="dimensionless" initial_value="0"/>
      <variable name="V_2" units="per_hour"/>
      <variable name="V_4" units="per_hour"/>
      <variable name="Cdh1" units="dimensionless" initial_value="0.000653278"/>
      <variable name="Cdc20" units="dimensionless" public_interface="in"/>
      <variable name="CYCA" units="dimensionless" public_interface="in"/>
      <variable name="CYCB" units="dimensionless" initial_value="2.72898" public_interface="out"/>
      <variable name="CYCE" units="dimensionless" public_interface="in"/>
      <variable name="time" units="hour" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v_42</ci>
            <apply>
               <times/>
               <ci>eps</ci>
               <apply>
                  <plus/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>K1</ci>
                        <apply>
                           <power/>
                           <apply>
                              <divide/>
                              <ci>CYCB</ci>
                              <ci>J1</ci>
                           </apply>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <power/>
                           <apply>
                              <divide/>
                              <ci>CYCB</ci>
                              <ci>J1</ci>
                           </apply>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <cn cellml:units="dimensionless">1</cn>
                     </apply>
                  </apply>
                  <ci>K1a</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_19</ci>
            <apply>
               <times/>
               <ci>V_2</ci>
               <ci>CYCB</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_21</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>V_4</ci>
                  <ci>Cdh1</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>J4</ci>
                  <ci>Cdh1</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_20</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>K3a</ci>
                     <apply>
                        <times/>
                        <ci>K3</ci>
                        <ci>Cdc20</ci>
                     </apply>
                  </apply>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>Cdh1</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <ci>J3</ci>
                     <ci>Cdh1</ci>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>V_2</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <ci>K2aa</ci>
                  <ci>Cdc20</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>K2a</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>Cdh1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>K2</ci>
                  <ci>Cdh1</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>V_4</ci>
            <apply>
               <times/>
               <ci>K4</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>GA</ci>
                     <ci>CYCA</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>GB</ci>
                     <ci>CYCB</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>GE</ci>
                     <ci>CYCE</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Cdh1</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_20</ci>
               <ci>v_21</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CYCB</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_42</ci>
               <ci>v_19</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="B">
      <variable name="eps" units="dimensionless" public_interface="in"/>
      <variable name="k15" units="per_hour" initial_value="0.25"/>
      <variable name="k16" units="per_hour" initial_value="0.25"/>
      <variable name="k17" units="per_hour" initial_value="10"/>
      <variable name="k17a" units="per_hour" initial_value="0.35"/>
      <variable name="k18" units="per_hour" initial_value="10"/>
      <variable name="K9" units="per_hour" initial_value="2.5"/>
      <variable name="J17" units="dimensionless" initial_value="0.3"/>
      <variable name="J15" units="dimensionless" initial_value="0.1"/>
      <variable name="v_1" units="per_hour"/>
      <variable name="v_2" units="per_hour"/>
      <variable name="v_34" units="per_hour"/>
      <variable name="v_39" units="per_hour" public_interface="out"/>
      <variable name="v_41" units="per_hour"/>
      <variable name="DRG" units="dimensionless" initial_value="0.900533"/>
      <variable name="ERG" units="dimensionless" initial_value="0.0121809"/>
      <variable name="time" units="hour" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v_39</ci>
            <apply>
               <times/>
               <ci>eps</ci>
               <ci>K9</ci>
               <ci>DRG</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_41</ci>
            <apply>
               <times/>
               <ci>eps</ci>
               <apply>
                  <plus/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>k17</ci>
                        <apply>
                           <power/>
                           <apply>
                              <divide/>
                              <ci>DRG</ci>
                              <ci>J17</ci>
                           </apply>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <power/>
                           <apply>
                              <divide/>
                              <ci>DRG</ci>
                              <ci>J17</ci>
                           </apply>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <cn cellml:units="dimensionless">1</cn>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k17a</ci>
                     <ci>ERG</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_2</ci>
            <apply>
               <times/>
               <ci>k18</ci>
               <ci>DRG</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_34</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>eps</ci>
                  <ci>k15</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <power/>
                     <apply>
                        <divide/>
                        <ci>DRG</ci>
                        <ci>J15</ci>
                     </apply>
                     <cn cellml:units="dimensionless">2</cn>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_1</ci>
            <apply>
               <times/>
               <ci>k16</ci>
               <ci>ERG</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>DRG</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_41</ci>
               <ci>v_2</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>ERG</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_34</ci>
               <ci>v_1</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="C">
      <variable name="K19" units="per_hour" initial_value="20"/>
      <variable name="K19a" units="per_hour" initial_value="0"/>
      <variable name="K20" units="per_hour" initial_value="10"/>
      <variable name="K21" units="dimensionless" initial_value="1"/>
      <variable name="K22" units="per_hour" initial_value="1"/>
      <variable name="K23a" units="per_hour" initial_value="0.005"/>
      <variable name="K23" units="per_hour" initial_value="1"/>
      <variable name="K26" units="per_hour" initial_value="10000"/>
      <variable name="K26R" units="per_hour" initial_value="200"/>
      <variable name="v_29" units="per_hour"/>
      <variable name="v_30" units="per_hour"/>
      <variable name="v_43" units="per_hour"/>
      <variable name="v_44" units="per_hour"/>
      <variable name="v_45" units="per_hour"/>
      <variable name="v_46" units="per_hour"/>
      <variable name="v_47" units="per_hour"/>
      <variable name="v_48" units="per_hour"/>
      <variable name="v_49" units="per_hour"/>
      <variable name="v_50" units="per_hour"/>
      <variable name="v_51" units="per_hour"/>
      <variable name="v_52" units="per_hour"/>
      <variable name="LA" units="dimensionless" initial_value="3"/>
      <variable name="LB" units="dimensionless" initial_value="5"/>
      <variable name="LD" units="dimensionless" initial_value="3.3"/>
      <variable name="LE" units="dimensionless" initial_value="5"/>
      <variable name="FE" units="dimensionless" initial_value="25"/>
      <variable name="FB" units="dimensionless" initial_value="2"/>
      <variable name="Rb" units="dimensionless" initial_value="0.000190871"/>
      <variable name="PPRb" units="dimensionless" initial_value="9.97574"/>
      <variable name="E2F" units="dimensionless" initial_value="0.989986" public_interface="out"/>
      <variable name="PE2F" units="dimensionless" initial_value="3.98594"/>
      <variable name="E2FRb" units="dimensionless" initial_value="0.00478911"/>
      <variable name="PE2FRb" units="dimensionless" initial_value="0.0192822"/>
      <variable name="PP1A" units="dimensionless"/>
      <variable name="PP1T" units="dimensionless" initial_value="1"/>
      <variable name="CYCA" units="dimensionless" public_interface="in"/>
      <variable name="CYCB" units="dimensionless" public_interface="in"/>
      <variable name="CYCDT" units="dimensionless" initial_value="0.010976"/>
      <variable name="CYCE" units="dimensionless" public_interface="in"/>
      <variable name="time" units="hour" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>PP1A</ci>
            <apply>
               <divide/>
               <ci>PP1T</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>K21</ci>
                     <ci>FE</ci>
                     <apply>
                        <plus/>
                        <ci>CYCA</ci>
                        <ci>CYCE</ci>
                        <apply>
                           <times/>
                           <ci>FB</ci>
                           <ci>CYCB</ci>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_29</ci>
            <apply>
               <times/>
               <ci>E2FRb</ci>
               <ci>K20</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>CYCDT</ci>
                     <ci>LD</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>LA</ci>
                     <ci>CYCA</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>LB</ci>
                     <ci>CYCB</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>LE</ci>
                     <ci>CYCE</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_30</ci>
            <apply>
               <times/>
               <ci>PE2FRb</ci>
               <ci>K20</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>CYCDT</ci>
                     <ci>LD</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>LA</ci>
                     <ci>CYCA</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>LB</ci>
                     <ci>CYCB</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>LE</ci>
                     <ci>CYCE</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_43</ci>
            <apply>
               <times/>
               <ci>Rb</ci>
               <ci>K20</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>CYCDT</ci>
                     <ci>LD</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>LA</ci>
                     <ci>CYCA</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>LB</ci>
                     <ci>CYCB</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>LE</ci>
                     <ci>CYCE</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_44</ci>
            <apply>
               <times/>
               <ci>PPRb</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>K19a</ci>
                     <apply>
                        <minus/>
                        <ci>PP1T</ci>
                        <ci>PP1A</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>K19</ci>
                     <ci>PP1A</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_45</ci>
            <apply>
               <times/>
               <ci>E2FRb</ci>
               <ci>K26R</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_46</ci>
            <apply>
               <times/>
               <ci>E2F</ci>
               <apply>
                  <plus/>
                  <ci>K23a</ci>
                  <apply>
                     <times/>
                     <ci>K23</ci>
                     <apply>
                        <plus/>
                        <ci>CYCA</ci>
                        <ci>CYCB</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_47</ci>
            <apply>
               <times/>
               <ci>PE2F</ci>
               <ci>K22</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_48</ci>
            <apply>
               <times/>
               <ci>E2F</ci>
               <ci>Rb</ci>
               <ci>K26</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_49</ci>
            <apply>
               <times/>
               <ci>PE2FRb</ci>
               <ci>K26R</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_50</ci>
            <apply>
               <times/>
               <ci>Rb</ci>
               <ci>PE2F</ci>
               <ci>K26</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_51</ci>
            <apply>
               <times/>
               <ci>PE2FRb</ci>
               <ci>K22</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_52</ci>
            <apply>
               <times/>
               <ci>E2FRb</ci>
               <apply>
                  <plus/>
                  <ci>K23a</ci>
                  <apply>
                     <times/>
                     <ci>K23</ci>
                     <apply>
                        <plus/>
                        <ci>CYCA</ci>
                        <ci>CYCB</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PPRb</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>v_29</ci>
                  <ci>v_30</ci>
                  <ci>v_43</ci>
               </apply>
               <ci>v_44</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>E2F</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>v_29</ci>
                     <ci>v_45</ci>
                     <ci>v_47</ci>
                  </apply>
                  <ci>v_46</ci>
               </apply>
               <ci>v_48</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PE2F</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>v_30</ci>
                     <ci>v_49</ci>
                     <ci>v_46</ci>
                  </apply>
                  <ci>v_47</ci>
               </apply>
               <ci>v_50</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Rb</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>v_44</ci>
                        <ci>v_45</ci>
                        <ci>v_49</ci>
                     </apply>
                     <ci>v_48</ci>
                  </apply>
                  <ci>v_50</ci>
               </apply>
               <ci>v_43</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>E2FRb</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>v_51</ci>
                        <ci>v_48</ci>
                     </apply>
                     <ci>v_52</ci>
                  </apply>
                  <ci>v_29</ci>
               </apply>
               <ci>v_45</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PE2FRb</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>v_52</ci>
                        <ci>v_50</ci>
                     </apply>
                     <ci>v_51</ci>
                  </apply>
                  <ci>v_30</ci>
               </apply>
               <ci>v_49</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="D">
      <variable name="eps" units="dimensionless" public_interface="in"/>
      <variable name="K5" units="per_hour" initial_value="20"/>
      <variable name="K6a" units="per_hour" initial_value="10"/>
      <variable name="K6" units="per_hour" initial_value="100"/>
      <variable name="K7a" units="per_hour" initial_value="0"/>
      <variable name="K7" units="per_hour" initial_value="0.6"/>
      <variable name="K8a" units="per_hour" initial_value="0.1"/>
      <variable name="K8" units="per_hour" initial_value="2"/>
      <variable name="K10" units="per_hour" initial_value="5"/>
      <variable name="k24" units="per_hour" initial_value="1000"/>
      <variable name="k24r" units="per_hour" initial_value="10"/>
      <variable name="K25" units="per_hour" initial_value="1000"/>
      <variable name="K25R" units="per_hour" initial_value="10"/>
      <variable name="K29" units="per_hour" initial_value="0.05"/>
      <variable name="K30" units="per_hour" initial_value="20"/>
      <variable name="J8" units="dimensionless" initial_value="0.1"/>
      <variable name="v_3" units="per_hour"/>
      <variable name="v_4" units="per_hour"/>
      <variable name="v_5" units="per_hour"/>
      <variable name="v_6" units="per_hour"/>
      <variable name="v_7" units="per_hour"/>
      <variable name="v_8" units="per_hour"/>
      <variable name="v_9" units="per_hour"/>
      <variable name="v_10" units="per_hour"/>
      <variable name="v_11" units="per_hour"/>
      <variable name="v_12" units="per_hour"/>
      <variable name="v_13" units="per_hour"/>
      <variable name="v_14" units="per_hour"/>
      <variable name="v_15" units="per_hour"/>
      <variable name="v_16" units="per_hour"/>
      <variable name="v_17" units="per_hour"/>
      <variable name="v_18" units="per_hour"/>
      <variable name="v_36" units="per_hour"/>
      <variable name="v_38" units="per_hour"/>
      <variable name="v_39" units="per_hour" public_interface="in"/>
      <variable name="v_40" units="per_hour"/>
      <variable name="HA" units="dimensionless" initial_value="0.5"/>
      <variable name="HB" units="dimensionless" initial_value="1"/>
      <variable name="HE" units="dimensionless" initial_value="0.5"/>
      <variable name="YE" units="dimensionless" initial_value="1"/>
      <variable name="YB" units="dimensionless" initial_value="0.05"/>
      <variable name="p27" units="dimensionless" initial_value="0.00922806"/>
      <variable name="V_6" units="per_hour" public_interface="out"/>
      <variable name="V_8" units="per_hour" public_interface="out"/>
      <variable name="E2F" units="dimensionless" public_interface="in"/>
      <variable name="MASS" units="dimensionless" public_interface="in"/>
      <variable name="Cdc20" units="dimensionless" initial_value="0.00220177" public_interface="out"/>
      <variable name="CA" units="dimensionless" initial_value="0.0356927"/>
      <variable name="CD" units="dimensionless" initial_value="0.010976"/>
      <variable name="CE" units="dimensionless" initial_value="0.000542587"/>
      <variable name="CYCA" units="dimensionless" initial_value="1.4094" public_interface="out"/>
      <variable name="CYCB" units="dimensionless" public_interface="in"/>
      <variable name="CYCD" units="dimensionless" initial_value="0.43929"/>
      <variable name="CYCE" units="dimensionless" initial_value="0.0229112" public_interface="out"/>
      <variable name="CYCET" units="dimensionless" initial_value="0.000542587"/>
      <variable name="time" units="hour" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V_6</ci>
            <apply>
               <plus/>
               <ci>K6a</ci>
               <apply>
                  <times/>
                  <ci>K6</ci>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <ci>HA</ci>
                        <ci>CYCA</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>HB</ci>
                        <ci>CYCB</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>HE</ci>
                        <ci>CYCE</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>V_8</ci>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>K8</ci>
                     <apply>
                        <plus/>
                        <apply>
                           <times/>
                           <ci>YE</ci>
                           <apply>
                              <plus/>
                              <ci>CYCA</ci>
                              <ci>CYCE</ci>
                           </apply>
                        </apply>
                        <apply>
                           <times/>
                           <ci>YB</ci>
                           <ci>CYCB</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>CYCET</ci>
                     <ci>J8</ci>
                  </apply>
               </apply>
               <ci>K8a</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_3</ci>
            <apply>
               <times/>
               <ci>K10</ci>
               <ci>CD</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_4</ci>
            <apply>
               <times/>
               <ci>K10</ci>
               <ci>CYCD</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_5</ci>
            <apply>
               <times/>
               <ci>K25</ci>
               <ci>p27</ci>
               <ci>CYCE</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_6</ci>
            <apply>
               <times/>
               <ci>K25</ci>
               <ci>p27</ci>
               <ci>CYCA</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_7</ci>
            <apply>
               <times/>
               <ci>k24</ci>
               <ci>p27</ci>
               <ci>CYCD</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_8</ci>
            <apply>
               <times/>
               <ci>k24r</ci>
               <ci>CD</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_9</ci>
            <apply>
               <times/>
               <ci>K30</ci>
               <ci>Cdc20</ci>
               <ci>CYCA</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_10</ci>
            <apply>
               <times/>
               <ci>K30</ci>
               <ci>Cdc20</ci>
               <ci>CA</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_11</ci>
            <apply>
               <times/>
               <ci>K25R</ci>
               <ci>CE</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_12</ci>
            <apply>
               <times/>
               <ci>K25R</ci>
               <ci>CA</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_13</ci>
            <apply>
               <times/>
               <ci>V_8</ci>
               <ci>CE</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_14</ci>
            <apply>
               <times/>
               <ci>V_8</ci>
               <ci>CYCE</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_15</ci>
            <apply>
               <times/>
               <ci>V_6</ci>
               <ci>p27</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_16</ci>
            <apply>
               <times/>
               <ci>V_6</ci>
               <ci>CE</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_17</ci>
            <apply>
               <times/>
               <ci>V_6</ci>
               <ci>CD</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_18</ci>
            <apply>
               <times/>
               <ci>V_6</ci>
               <ci>CA</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_36</ci>
            <apply>
               <times/>
               <ci>eps</ci>
               <ci>K29</ci>
               <ci>E2F</ci>
               <ci>MASS</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_38</ci>
            <apply>
               <times/>
               <ci>eps</ci>
               <apply>
                  <plus/>
                  <ci>K7a</ci>
                  <apply>
                     <times/>
                     <ci>K7</ci>
                     <ci>E2F</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_40</ci>
            <apply>
               <times/>
               <ci>eps</ci>
               <ci>K5</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CA</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>v_6</ci>
                     <ci>v_12</ci>
                  </apply>
                  <ci>v_18</ci>
               </apply>
               <ci>v_10</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CD</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>v_7</ci>
                     <ci>v_8</ci>
                  </apply>
                  <ci>v_17</ci>
               </apply>
               <ci>v_3</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CE</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>v_5</ci>
                     <ci>v_11</ci>
                  </apply>
                  <ci>v_13</ci>
               </apply>
               <ci>v_16</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CYCA</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>v_36</ci>
                     <ci>v_9</ci>
                  </apply>
                  <ci>v_6</ci>
               </apply>
               <ci>v_12</ci>
               <ci>v_18</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CYCD</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>v_39</ci>
                     <ci>v_17</ci>
                     <ci>v_8</ci>
                  </apply>
                  <ci>v_7</ci>
               </apply>
               <ci>v_4</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CYCE</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>v_38</ci>
                     <ci>v_14</ci>
                  </apply>
                  <ci>v_5</ci>
               </apply>
               <ci>v_11</ci>
               <ci>v_16</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>p27</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>v_40</ci>
                              <ci>v_3</ci>
                              <ci>v_8</ci>
                           </apply>
                           <ci>v_15</ci>
                        </apply>
                        <ci>v_5</ci>
                     </apply>
                     <ci>v_6</ci>
                  </apply>
                  <ci>v_7</ci>
               </apply>
               <ci>v_11</ci>
               <ci>v_12</ci>
               <ci>v_13</ci>
               <ci>v_10</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="E">
      <variable name="eps" units="dimensionless" initial_value="1" public_interface="out"/>
      <variable name="K27" units="per_hour" initial_value="0.2"/>
      <variable name="K28" units="per_hour" initial_value="0.2"/>
      <variable name="v_31" units="per_hour"/>
      <variable name="v_32" units="per_hour"/>
      <variable name="v_33" units="per_hour"/>
      <variable name="r31switch" units="dimensionless" initial_value="1"/>
      <variable name="MU" units="per_hour" initial_value="0.061"/>
      <variable name="GM" units="dimensionless" initial_value="1.35565"/>
      <variable name="MASS" units="dimensionless" initial_value="1.68776" public_interface="out"/>
      <variable name="time" units="hour" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v_31</ci>
            <apply>
               <times/>
               <ci>K27</ci>
               <ci>MASS</ci>
               <ci>r31switch</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_32</ci>
            <apply>
               <times/>
               <ci>K28</ci>
               <ci>GM</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_33</ci>
            <apply>
               <times/>
               <ci>eps</ci>
               <ci>MU</ci>
               <ci>GM</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>GM</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_31</ci>
               <ci>v_32</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>MASS</ci>
            </apply>
            <ci>v_33</ci>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="F">
      <variable name="eps" units="dimensionless" public_interface="in"/>
      <variable name="K11a" units="per_hour" initial_value="0"/>
      <variable name="K11" units="per_hour" initial_value="1.5"/>
      <variable name="K12" units="per_hour" initial_value="1.5"/>
      <variable name="K13" units="per_hour" initial_value="5"/>
      <variable name="K14" units="per_hour" initial_value="2.5"/>
      <variable name="K31" units="per_hour" initial_value="0.7"/>
      <variable name="K32" units="per_hour" initial_value="1.8"/>
      <variable name="K33" units="per_hour" initial_value="0.05"/>
      <variable name="K34" units="per_hour" initial_value="0.05"/>
      <variable name="J13" units="dimensionless" initial_value="0.005"/>
      <variable name="J14" units="dimensionless" initial_value="0.005"/>
      <variable name="J31" units="dimensionless" initial_value="0.01"/>
      <variable name="J32" units="dimensionless" initial_value="0.01"/>
      <variable name="v_22" units="per_hour"/>
      <variable name="v_23" units="per_hour"/>
      <variable name="v_24" units="per_hour"/>
      <variable name="v_25" units="per_hour"/>
      <variable name="v_26" units="per_hour"/>
      <variable name="v_27" units="per_hour"/>
      <variable name="v_28" units="per_hour"/>
      <variable name="v_35" units="per_hour"/>
      <variable name="v_37" units="per_hour"/>
      <variable name="IEP" units="dimensionless" initial_value="0.154655"/>
      <variable name="PPX" units="dimensionless" initial_value="1"/>
      <variable name="Cdc20" units="dimensionless" public_interface="in"/>
      <variable name="Cdc20T" units="dimensionless" initial_value="2.36733"/>
      <variable name="CYCB" units="dimensionless" public_interface="in"/>
      <variable name="time" units="hour" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v_22</ci>
            <apply>
               <times/>
               <ci>K34</ci>
               <ci>PPX</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_23</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>K31</ci>
                  <ci>CYCB</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>IEP</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <ci>J31</ci>
                     <ci>IEP</ci>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_24</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>K32</ci>
                  <ci>PPX</ci>
                  <ci>IEP</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>J32</ci>
                  <ci>IEP</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_25</ci>
            <apply>
               <times/>
               <ci>K12</ci>
               <ci>Cdc20T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_26</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>K13</ci>
                  <ci>IEP</ci>
                  <apply>
                     <minus/>
                     <ci>Cdc20T</ci>
                     <ci>Cdc20</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <ci>J13</ci>
                     <ci>Cdc20</ci>
                  </apply>
                  <ci>Cdc20T</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_27</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>K14</ci>
                  <ci>Cdc20</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>J14</ci>
                  <ci>Cdc20</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_28</ci>
            <apply>
               <times/>
               <ci>K12</ci>
               <ci>Cdc20</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_35</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <ci>eps</ci>
                  <ci>K11a</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>K11</ci>
                  <ci>CYCB</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_37</ci>
            <apply>
               <times/>
               <ci>eps</ci>
               <ci>K33</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Cdc20T</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_35</ci>
               <ci>v_25</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>IEP</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_23</ci>
               <ci>v_24</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PPX</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_37</ci>
               <ci>v_22</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="environment" component_2="A"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="environment" component_2="B"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="environment" component_2="C"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="environment" component_2="D"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="environment" component_2="E"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="environment" component_2="F"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="A" component_2="E"/>
      <map_variables variable_1="eps" variable_2="eps"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="A" component_2="D"/>
      <map_variables variable_1="Cdc20" variable_2="Cdc20"/>
      <map_variables variable_1="CYCA" variable_2="CYCA"/>
      <map_variables variable_1="CYCE" variable_2="CYCE"/>
      <map_variables variable_1="CYCB" variable_2="CYCB"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="B" component_2="E"/>
      <map_variables variable_1="eps" variable_2="eps"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="B" component_2="D"/>
      <map_variables variable_1="v_39" variable_2="v_39"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="C" component_2="D"/>
      <map_variables variable_1="CYCA" variable_2="CYCA"/>
      <map_variables variable_1="CYCE" variable_2="CYCE"/>
      <map_variables variable_1="E2F" variable_2="E2F"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="C" component_2="A"/>
      <map_variables variable_1="CYCB" variable_2="CYCB"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="D" component_2="E"/>
      <map_variables variable_1="eps" variable_2="eps"/>
      <map_variables variable_1="MASS" variable_2="MASS"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="F" component_2="E"/>
      <map_variables variable_1="eps" variable_2="eps"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="F" component_2="D"/>
      <map_variables variable_1="Cdc20" variable_2="Cdc20"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="F" component_2="A"/>
      <map_variables variable_1="CYCB" variable_2="CYCB"/>
   </connection>
</model>
