<?xml version="1.0"?>

<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="nazaret_2009" cmeta:id="nazaret_2009" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">


<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Mitochondrial energetic metabolism: a simplified model of TCA cycle with ATP production</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This CellML runs in both OpenCell and COR. It is the unscaled version of the model, taken from equations 16-25 in the original paper. There are no published results (figures) for the unscaled model therefore we do not know whether or not this CellML model is capable of reproducing the orignal model's results.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Mitochondria play a central role in cellular energetic metabolism. The essential parts of this metabolism are the tricarboxylic acid (TCA) cycle, the respiratory chain and the adenosine triphosphate (ATP) synthesis machinery. Here a simplified model of these three metabolic components with a limited set of differential equations is presented. The existence of a steady state is demonstrated and results of numerical simulations are presented. The relevance of a simple model to represent actual in vivo behavior is discussed.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Mitochondrial energetic metabolism: a simplified model of TCA cycle with ATP production, Nazaret C, Heiske M, Thurley K, and Mazat JP, 2009, <emphasis>Journal of Theoretical Biology</emphasis>, 258, 455-464.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/19007794">PubMed ID: 19007794</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction diagram</title>
    </objectinfo>
    <imagedata fileref="nazaret_2009.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  <units name="molar">
    <unit units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="micromolar">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="millimolar">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="millivolt">
    <unit prefix="milli" units="volt"/>
  </units>
  
  <units name="per_millivolt">
    <unit exponent="-1" units="millivolt"/>
  </units>
  
  <units name="per_micromolar">
    <unit exponent="-1" units="micromolar"/>
  </units>
  
  <units name="per_millimolar">
    <unit exponent="-1" units="millimolar"/>
  </units>
  
  <units name="molar_per_millivolt_per_second">
    <unit units="molar"/>
	<unit exponent="-1" units="millivolt"/>
	<unit exponent="-1" units="second"/>
  </units>
  
  <units name="millimolar_per_millivolt">
    <unit units="millimolar"/>
	<unit exponent="-1" units="millivolt"/>
  </units>
  
  <units name="micromolar_per_second">
    <unit units="micromolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  
  <units name="millimolar_per_second">
    <unit units="millimolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit exponent="-1" units="second"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit exponent="-1" units="second"/>
	<unit exponent="-1" units="molar"/>
  </units>
  
  <units name="third_order_rate_constant">
    <unit exponent="-1" units="second"/>
	<unit exponent="-2" units="molar"/>
  </units>
  
  <units name="joule_per_mole_kelvin">
    <unit units="joule"/>
	<unit exponent="-1" units="mole"/>
	<unit exponent="-1" units="kelvin"/>
  </units>
  
  <units name="joule_per_mole">
    <unit units="joule"/>
	<unit exponent="-1" units="mole"/>
  </units>
  
  <units name="coulomb_per_mole">
    <unit units="coulomb"/>
	<unit exponent="-1" units="mole"/>
  </units>
  
  
  <component name="environment">
    <variable name="time" public_interface="out" units="second"/>
  </component>
 
  <component cmeta:id="Pyr" name="Pyr">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#Pyr">
        <dc:title>Pyr</dc:title>
        <dcterms:alternative>pyruvate</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="Pyr_Pyr" initial_value="0.154" name="Pyr" public_interface="out" units="micromolar"/> 
    <variable name="v1" public_interface="in" units="micromolar_per_second"/>
    <variable name="v2" public_interface="in" units="micromolar_per_second"/>
	<variable name="v7" public_interface="in" units="micromolar_per_second"/>
    <variable name="time" public_interface="in" units="second"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="1"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> Pyr </ci> 
        </apply>
        <apply>
          <minus/> 
          <ci> v1 </ci>
          <apply>
            <plus/> 
            <ci> v2 </ci>
			<ci> v7 </ci>
		  </apply>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="AcCoA" name="AcCoA">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#AcCoA">
        <dc:title>AcCoA</dc:title>
        <dcterms:alternative>acetyl CoA</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="AcCoA_AcCoA" initial_value="0.063" name="AcCoA" public_interface="out" units="micromolar"/> 
    <variable name="v2" public_interface="in" units="micromolar_per_second"/>
    <variable name="v3" public_interface="in" units="micromolar_per_second"/>
	<variable name="time" public_interface="in" units="second"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="2"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> AcCoA </ci> 
        </apply>
        <apply>
          <minus/> 
          <ci> v2 </ci>
          <ci> v3 </ci>
		</apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="Cit" name="Cit">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#Cit">
        <dc:title>Cit</dc:title>
        <dcterms:alternative>citrate</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="Cit_Cit" initial_value="0.44" name="Cit" public_interface="out" units="micromolar"/> 
    <variable name="v3" public_interface="in" units="micromolar_per_second"/>
    <variable name="v4" public_interface="in" units="micromolar_per_second"/>
	<variable name="time" public_interface="in" units="second"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="3"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> Cit </ci> 
        </apply>
        <apply>
          <minus/> 
          <ci> v3 </ci>
          <ci> v4 </ci>
		</apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="KG" name="KG">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#KG">
        <dc:title>KG</dc:title>
        <dcterms:alternative>alpha-ketoglutarate</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="KG_KG" initial_value="0.225" name="KG" public_interface="out" units="micromolar"/> 
    <variable name="v4" public_interface="in" units="micromolar_per_second"/>
    <variable name="v5" public_interface="in" units="micromolar_per_second"/>
	<variable name="v6" public_interface="in" units="micromolar_per_second"/>
    <variable name="time" public_interface="in" units="second"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="4"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> KG </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/> 
            <ci> v4 </ci>
			<ci> v6 </ci>
		  </apply>
		  <ci> v5 </ci>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="OAA" name="OAA">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#OAA">
        <dc:title>OAA</dc:title>
        <dcterms:alternative>oxaloacetate</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="OAA_OAA" initial_value="0.005" name="OAA" public_interface="out" units="micromolar"/> 
    <variable name="v3" public_interface="in" units="micromolar_per_second"/>
    <variable name="v5" public_interface="in" units="micromolar_per_second"/>
	<variable name="v6" public_interface="in" units="micromolar_per_second"/>
	<variable name="v7" public_interface="in" units="micromolar_per_second"/>
	<variable name="v8" public_interface="in" units="micromolar_per_second"/>
    <variable name="time" public_interface="in" units="second"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="5"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> OAA </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/> 
            <ci> v5 </ci>
			<ci> v7 </ci>
		  </apply>
		  <apply>
            <plus/> 
            <ci> v3 </ci>
			<ci> v8 </ci>
			<ci> v6 </ci>
		  </apply>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="NAD" name="NAD">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#NAD">
        <dc:title>NAD</dc:title>
        <dcterms:alternative>nicotinamide adenine dinucleotide</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="NAD_NAD" initial_value="0.856" name="NAD" public_interface="out" units="micromolar"/> 
    <variable name="v2" public_interface="in" units="micromolar_per_second"/>
    <variable name="v4" public_interface="in" units="micromolar_per_second"/>
	<variable name="v5" public_interface="in" units="micromolar_per_second"/>
	<variable name="vresp" public_interface="in" units="micromolar_per_second"/>
	<variable name="time" public_interface="in" units="second"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="6"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> NAD </ci> 
        </apply>
        <apply>
          <minus/> 
          <ci> vresp </ci>
		  <apply>
            <plus/> 
            <ci> v2 </ci>
			<ci> v4 </ci>
		    <apply>
              <times/> 
              <cn cellml:units="dimensionless"> 2.0 </cn>
			  <ci> v5 </ci>
			</apply>
		  </apply>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="ATP" name="ATP">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#ATP">
        <dc:title>ATP</dc:title>
        <dcterms:alternative>adenosine triphospahte</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="ATP_ATP" initial_value="3.536" name="ATP" public_interface="out" units="micromolar"/> 
    <variable name="vATP" public_interface="in" units="micromolar_per_second"/>
    <variable name="vANT" public_interface="in" units="micromolar_per_second"/>
	<variable name="v5" public_interface="in" units="micromolar_per_second"/>
	<variable name="v7" public_interface="in" units="micromolar_per_second"/>
	<variable name="time" public_interface="in" units="second"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="7"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> ATP </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/> 
            <ci> vATP </ci>
			<ci> v5 </ci>
		  </apply>
		  <apply>
            <plus/> 
            <ci> vANT </ci>
			<ci> v7 </ci>
		  </apply>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="delta_psi" name="delta_psi">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#delta_psi">
        <dc:title>delta_psi</dc:title>
        <dcterms:alternative>membrane potential</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="delta_psi_delta_psi" initial_value="150.0" name="delta_psi" public_interface="out" units="millivolt"/> 
	<variable name="C" initial_value="6.75e-06" units="millimolar_per_millivolt"/>
    <variable name="vresp" public_interface="in" units="micromolar_per_second"/>
    <variable name="vANT" public_interface="in" units="micromolar_per_second"/>
	<variable name="vleak" public_interface="in" units="micromolar_per_second"/>
	<variable name="vATP" public_interface="in" units="micromolar_per_second"/>
	<variable name="time" public_interface="in" units="second"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="8"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> delta_psi </ci> 
        </apply>
        <apply>
          <times/> 
          <apply>
            <divide/>
			<cn cellml:units="dimensionless"> 1 </cn>
			<ci> C </ci>
		  </apply>
		  <apply>
            <minus/> 
            <apply>
              <times/>
			  <cn cellml:units="dimensionless"> 10 </cn>
			  <ci> vresp </ci>
			</apply>
			<apply>
              <plus/> 
              <apply>
                <times/>
			    <cn cellml:units="dimensionless"> 3 </cn>
			    <ci> vATP </ci>
			  </apply>
			  <ci> vleak </ci>
			  <ci> vANT </ci>
		    </apply>
		  </apply>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component name="v1">
    <variable cmeta:id="v1_v1" name="v1" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="38.0" name="k1" units="micromolar_per_second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="9">
      <apply id="v1_calculation"><eq/>
        <ci> v1 </ci>
        <ci> k1 </ci>
      </apply>
    </math>
  </component>
  
  <component name="v2">
    <variable cmeta:id="v2_v2" name="v2" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="152.0" name="k2" units="second_order_rate_constant"/>
   
    <variable name="Pyr" public_interface="in" units="micromolar"/>
    <variable name="NAD" public_interface="in" units="micromolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="10">
      <apply id="v2_calculation"><eq/>
        <ci> v2 </ci>
        <apply>
		  <times/>
          <ci> k2 </ci>
		  <ci> Pyr </ci>
          <ci> NAD </ci>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v3">
    <variable cmeta:id="v3_v3" name="v3" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="57142.0" name="k3" units="second_order_rate_constant"/>
   
    <variable name="OAA" public_interface="in" units="micromolar"/>
    <variable name="AcCoA" public_interface="in" units="micromolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="11">
      <apply id="v3_calculation"><eq/>
        <ci> v3 </ci>
        <apply>
		  <times/>
          <ci> k3 </ci>
		  <ci> OAA </ci>
          <ci> AcCoA </ci>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v4">
    <variable cmeta:id="v4_v4" name="v4" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="53.0" name="k4" units="second_order_rate_constant"/>
   
    <variable name="Cit" public_interface="in" units="micromolar"/>
    <variable name="NAD" public_interface="in" units="micromolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="12">
      <apply id="v4_calculation"><eq/>
        <ci> v4 </ci>
        <apply>
		  <times/>
          <ci> k4 </ci>
		  <ci> Cit </ci>
          <ci> NAD </ci>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v5">
    <variable cmeta:id="v5_v5" name="v5" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="82361.0" name="k5" units="third_order_rate_constant"/>
   
    <variable name="At" public_interface="in" units="millimolar"/>
    <variable name="ATP" public_interface="in" units="micromolar"/>
	<variable name="KG" public_interface="in" units="micromolar"/>
    <variable name="NAD" public_interface="in" units="micromolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="13">
      <apply id="v5_calculation"><eq/>
        <ci> v5 </ci>
        <apply>
		  <times/>
          <ci> k5 </ci>
		  <ci> KG </ci>
          <ci> NAD </ci>
		  <apply>
		    <minus/>
            <ci> At </ci>
		    <ci> ATP </ci>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v6">
    <variable cmeta:id="v6_v6" name="v6" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="3.2e-3" name="k6" units="first_order_rate_constant"/>
   
    <variable name="OAA" public_interface="in" units="micromolar"/>
    <variable name="KG" public_interface="in" units="micromolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="14">
      <apply id="v6_calculation"><eq/>
        <ci> v6 </ci>
        <apply>
		  <times/>
          <ci> k6 </ci>
		  <apply>
		    <minus/>
            <ci> OAA </ci>
		    <ci> KG </ci>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v7">
    <variable cmeta:id="v7_v7" name="v7" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="40.0" name="k7" units="second_order_rate_constant"/>
   
    <variable name="Pyr" public_interface="in" units="micromolar"/>
    <variable name="ATP" public_interface="in" units="micromolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="15">
      <apply id="v7_calculation"><eq/>
        <ci> v7 </ci>
        <apply>
		  <times/>
          <ci> k7 </ci>
		  <ci> Pyr </ci>
		  <ci> ATP </ci>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="v8">
    <variable cmeta:id="v8_v8" name="v8" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="3.6" name="k8" units="first_order_rate_constant"/>
   
    <variable name="OAA" public_interface="in" units="micromolar"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="16">
      <apply id="v8_calculation"><eq/>
        <ci> v8 </ci>
        <apply>
		  <times/>
          <ci> k8 </ci>
		  <ci> OAA </ci>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="vANT">
    <variable cmeta:id="vANT_vANT" name="vANT" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="0.1" name="kANT" units="first_order_rate_constant"/>
   
    <variable name="ATP" public_interface="in" units="micromolar"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="17">
      <apply id="vANT_calculation"><eq/>
        <ci> vANT </ci>
        <apply>
		  <times/>
          <ci> kANT </ci>
		  <ci> ATP </ci>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="vleak">
    <variable cmeta:id="vleak_vleak" name="vleak" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="0.426" name="kleak" units="molar_per_millivolt_per_second"/>
   
    <variable name="delta_psi" public_interface="in" units="millivolt"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="18">
      <apply id="vleak_calculation"><eq/>
        <ci> vleak </ci>
        <apply>
		  <times/>
          <ci> kleak </ci>
		  <ci> delta_psi </ci>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="vresp">
    <variable cmeta:id="vresp_vresp" name="vresp" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="2.5" name="kresp" units="millimolar_per_second"/>
	<variable initial_value="2" name="K" units="millimolar"/>
    <variable initial_value="0.1" name="a" units="per_millivolt"/>
    <variable initial_value="150.0" name="delta_psi_m" units="millivolt"/>
	
    <variable name="delta_psi" public_interface="in" units="millivolt"/>
	<variable name="NAD" public_interface="in" units="micromolar"/>
	<variable name="Nt" public_interface="in" units="millimolar"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="19">
      <apply id="vresp_calculation"><eq/>
        <ci> vresp </ci>
        <apply>
		  <times/>
          <ci> kresp </ci>
		  <apply>
		    <divide/>
			<apply>
		      <minus/>
			  <ci> Nt </ci>
			  <ci> NAD </ci>
		    </apply>
			<apply>
		      <minus/>
			  <apply>
		        <plus/>
				<ci> K </ci>
			    <ci> Nt </ci>
		      </apply>
			  <ci> NAD </ci>
		    </apply>
		  </apply>
		  <apply>
		    <divide/>
			<cn cellml:units="dimensionless"> 1 </cn>
			<apply>
		      <plus/>
			  <cn cellml:units="dimensionless"> 1 </cn>
			  <apply>
		        <exp/>
		        <apply>
		          <times/>
			      <ci> a </ci>
				  <apply>
		            <minus/>
				    <ci> delta_psi </ci>
			        <ci> delta_psi_m </ci>
				  </apply>
		        </apply>
			  </apply>
			</apply>
		  </apply>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="vATP">
    <variable cmeta:id="vATP_vATP" name="vATP" public_interface="out" units="micromolar_per_second"/>
    
    <variable initial_value="131.9" name="kATP" units="millimolar_per_second"/>
	<variable initial_value="4" name="b" units="per_micromolar"/>
   
    <variable name="ATP" public_interface="in" units="micromolar"/>
	<variable name="ATP_crit_delta_psi" public_interface="in" units="micromolar"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="20">
      <apply id="vATP_calculation"><eq/>
        <ci> vATP </ci>
        <apply>
		  <times/>
          <ci> kATP </ci>
		  <apply>
		    <minus/>
			<apply>
		      <divide/>
			  <cn cellml:units="dimensionless"> 2 </cn>
			  <apply>
		        <plus/>
			    <cn cellml:units="dimensionless"> 1 </cn>
			    <apply>
		          <exp/>
		          <apply>
		            <times/>
			        <ci> b </ci>
				    <apply>
		              <minus/>
				      <ci> ATP </ci>
			          <ci> ATP_crit_delta_psi </ci>
					</apply>
				  </apply>
				</apply>
			  </apply>
			</apply>
			<cn cellml:units="dimensionless"> 1 </cn>
		  </apply>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="ATP_crit_delta_psi">
    <variable cmeta:id="ATP_crit_delta_psi_ATP_crit_delta_psi" name="ATP_crit_delta_psi" public_interface="out" units="micromolar"/>
    
    <variable initial_value="8.314" name="R" units="joule_per_mole_kelvin"/>
	<variable initial_value="298" name="T" units="kelvin"/>
	<variable initial_value="96485" name="F" units="coulomb_per_mole"/>
	<variable initial_value="4.4e-6" name="Kapp" units="per_millimolar"/>
	<variable name="Pi" initial_value="2.440" units="millimolar"/>
    <variable name="delta_G_transport" units="joule_per_mole"/>
   
    <variable name="At" public_interface="in" units="millimolar"/>
	<variable name="delta_psi" public_interface="in" units="millivolt"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="21">
      <apply id="ATP_crit_delta_psi_calculation"><eq/>
        <ci> ATP_crit_delta_psi </ci>
        <apply>
		  <divide/>
          <ci> At </ci>
		  <apply>
		    <plus/>
			<cn cellml:units="dimensionless"> 1 </cn>
			<apply>
		      <divide/>
			  <apply>
		        <exp/>
			    <apply>
		          <divide/>
		          <apply>
		            <times/>
			        <cn cellml:units="dimensionless"> -3 </cn>
					<ci> delta_G_transport </ci>
				  </apply>
				  <apply>
		            <times/>
				    <ci> R </ci>
			        <ci> T </ci>
				  </apply>
				</apply>
		      </apply>
			  <apply>
		        <times/>
				<ci> Kapp </ci>
			    <ci> Pi </ci>
			  </apply>
			</apply>
		  </apply>
		</apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="22">
      <apply id="delta_G_transport_calculation"><eq/>
        <ci> delta_G_transport </ci>
		<apply>
          <times/>
          <cn cellml:units="dimensionless"> 0.0012 </cn>
          <ci> F </ci>
          <ci> delta_psi </ci>
        </apply>
	  </apply>
    </math>
  </component>
  
  <component name="model_parameters">
    <variable name="At" initial_value="4.160" public_interface="out" units="millimolar"/>
	<variable name="Nt" initial_value="1.070" public_interface="out" units="millimolar"/>
  </component>
  
  
  <connection>
    <map_components component_1="Pyr" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="AcCoA" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="Cit" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="KG" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="OAA" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>

  <connection>
    <map_components component_1="NAD" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="ATP" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="delta_psi" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="Pyr" component_2="v1"/>
    <map_variables variable_1="v1" variable_2="v1"/>
  </connection>
  
  <connection>
    <map_components component_1="Pyr" component_2="v2"/>
    <map_variables variable_1="Pyr" variable_2="Pyr"/>
    <map_variables variable_1="v2" variable_2="v2"/>
  </connection>
  
  <connection>
    <map_components component_1="Pyr" component_2="v7"/>
    <map_variables variable_1="Pyr" variable_2="Pyr"/>
    <map_variables variable_1="v7" variable_2="v7"/>
  </connection>
  
  <connection>
    <map_components component_1="AcCoA" component_2="v2"/>
    <map_variables variable_1="v2" variable_2="v2"/>
  </connection>
  
  <connection>
    <map_components component_1="AcCoA" component_2="v3"/>
    <map_variables variable_1="AcCoA" variable_2="AcCoA"/>
    <map_variables variable_1="v3" variable_2="v3"/>
  </connection>
  
  <connection>
    <map_components component_1="Cit" component_2="v3"/>
    <map_variables variable_1="v3" variable_2="v3"/>
  </connection>
  
  <connection>
    <map_components component_1="Cit" component_2="v4"/>
    <map_variables variable_1="Cit" variable_2="Cit"/>
    <map_variables variable_1="v4" variable_2="v4"/>
  </connection>
  
  <connection>
    <map_components component_1="KG" component_2="v4"/>
    <map_variables variable_1="v4" variable_2="v4"/>
  </connection>
  
  <connection>
    <map_components component_1="KG" component_2="v5"/>
    <map_variables variable_1="KG" variable_2="KG"/>
    <map_variables variable_1="v5" variable_2="v5"/>
  </connection>
  
  <connection>
    <map_components component_1="KG" component_2="v6"/>
    <map_variables variable_1="KG" variable_2="KG"/>
    <map_variables variable_1="v6" variable_2="v6"/>
  </connection>
  
  <connection>
    <map_components component_1="OAA" component_2="v5"/>
    <map_variables variable_1="v5" variable_2="v5"/>
  </connection>
  
  <connection>
    <map_components component_1="OAA" component_2="v3"/>
    <map_variables variable_1="OAA" variable_2="OAA"/>
    <map_variables variable_1="v3" variable_2="v3"/>
  </connection>
  
  <connection>
    <map_components component_1="OAA" component_2="v6"/>
    <map_variables variable_1="OAA" variable_2="OAA"/>
    <map_variables variable_1="v6" variable_2="v6"/>
  </connection>
  
  <connection>
    <map_components component_1="OAA" component_2="v7"/>
    <map_variables variable_1="v7" variable_2="v7"/>
  </connection>
  
  <connection>
    <map_components component_1="OAA" component_2="v8"/>
    <map_variables variable_1="OAA" variable_2="OAA"/>
    <map_variables variable_1="v8" variable_2="v8"/>
  </connection>
  
  <connection>
    <map_components component_1="NAD" component_2="v2"/>
    <map_variables variable_1="NAD" variable_2="NAD"/>
    <map_variables variable_1="v2" variable_2="v2"/>
  </connection>
  
  <connection>
    <map_components component_1="NAD" component_2="v4"/>
    <map_variables variable_1="NAD" variable_2="NAD"/>
    <map_variables variable_1="v4" variable_2="v4"/>
  </connection>
  
  <connection>
    <map_components component_1="NAD" component_2="v5"/>
    <map_variables variable_1="NAD" variable_2="NAD"/>
	<map_variables variable_1="v5" variable_2="v5"/>
  </connection>
  
  <connection>
    <map_components component_1="NAD" component_2="vresp"/>
    <map_variables variable_1="NAD" variable_2="NAD"/>
	<map_variables variable_1="vresp" variable_2="vresp"/>
  </connection>
  
  <connection>
    <map_components component_1="ATP" component_2="vATP"/>
    <map_variables variable_1="ATP" variable_2="ATP"/>
    <map_variables variable_1="vATP" variable_2="vATP"/>
  </connection>
  
  <connection>
    <map_components component_1="ATP" component_2="vANT"/>
    <map_variables variable_1="ATP" variable_2="ATP"/>
    <map_variables variable_1="vANT" variable_2="vANT"/>
  </connection>
  
  <connection>
    <map_components component_1="ATP" component_2="v5"/>
    <map_variables variable_1="ATP" variable_2="ATP"/>
	<map_variables variable_1="v5" variable_2="v5"/>
  </connection>
  
  <connection>
    <map_components component_1="ATP" component_2="v7"/>
    <map_variables variable_1="ATP" variable_2="ATP"/>
	<map_variables variable_1="v7" variable_2="v7"/>
  </connection>
  
  <connection>
    <map_components component_1="delta_psi" component_2="vresp"/>
    <map_variables variable_1="delta_psi" variable_2="delta_psi"/>
	<map_variables variable_1="vresp" variable_2="vresp"/>
  </connection>
  
  <connection>
    <map_components component_1="delta_psi" component_2="vATP"/>
    <map_variables variable_1="vATP" variable_2="vATP"/>
  </connection>
  
  <connection>
    <map_components component_1="delta_psi" component_2="vleak"/>
    <map_variables variable_1="delta_psi" variable_2="delta_psi"/>
	<map_variables variable_1="vleak" variable_2="vleak"/>
  </connection>
  
  <connection>
    <map_components component_1="delta_psi" component_2="vANT"/>
    <map_variables variable_1="vANT" variable_2="vANT"/>
  </connection>
  
  <connection>
    <map_components component_1="vresp" component_2="model_parameters"/>
    <map_variables variable_1="Nt" variable_2="Nt"/>
  </connection>
  
  <connection>
    <map_components component_1="v5" component_2="model_parameters"/>
    <map_variables variable_1="At" variable_2="At"/>
  </connection>
  
  <connection>
    <map_components component_1="ATP_crit_delta_psi" component_2="model_parameters"/>
    <map_variables variable_1="At" variable_2="At"/>
  </connection>
  
  <connection>
    <map_components component_1="ATP_crit_delta_psi" component_2="vATP"/>
    <map_variables variable_1="ATP_crit_delta_psi" variable_2="ATP_crit_delta_psi"/>
  </connection>
  
  <connection>
    <map_components component_1="ATP_crit_delta_psi" component_2="delta_psi"/>
    <map_variables variable_1="delta_psi" variable_2="delta_psi"/>
  </connection>
  
  <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    
	<rdf:Description rdf:about="">
      <dc:title>Mitochondrial energetic metabolism: a simplified model of TCA cycle with ATP production (unscaled version)</dc:title>
	  <dc:creator rdf:parseType="Resource">
        <vCard:N rdf:parseType="Resource">
          <vCard:Family>Lloyd</vCard:Family>
          <vCard:Given>Catherine</vCard:Given>
		  <vCard:Other>May</vCard:Other>
        </vCard:N>
        <vCard:EMAIL rdf:parseType="Resource">
          <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland</vCard:Orgname>
          <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
    </rdf:Description>
    
    <rdf:Description rdf:about="#nazarat_2009">
      <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>metabolism</rdf:li>
			  <rdf:li>TCA cycle</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>

      <bqs:reference rdf:parseType="Resource">
        <bqs:Pubmed_id>19007794</bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator>
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Nazaret</vCard:Family>
                    <vCard:Given>C</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Heiske</vCard:Family>
                    <vCard:Given>M</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Thurley</vCard:Family>
                    <vCard:Given>K</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Mazat</vCard:Family>
                    <vCard:Given>J</vCard:Given>
					<vCard:Other>P</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title>
            Mitochondrial energetic metabolism: a simplified model of TCA cycle with ATP production
          </dc:title>
          <dcterms:issued rdf:parseType="Resource">
            <dcterms:W3CDTF>2009-06-07</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title>Journal of Theoretical Biology</dc:title>
          </bqs:Journal>
		  <bqs:volume>258</bqs:volume>
          <bqs:first_page>455</bqs:first_page>
          <bqs:last_page>464</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
</model>