// This CellML file was generated on 4/05/2010 at 3:12:32 at p.m. using:
//
// COR (0.9.31.1371)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2003-09-09
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Yang et al's 2003 model of the myogenic response in a smooth muscle cell.
// bio_entity: Smooth Muscle Cell
// comment: FN Catherine Lloyd; This is the CellML description of Yang et al's 2003 model of the myogenic response in a smooth muscle cell.
// reference: Pubmed_id 11709436; Given Jin; Family Yang; Suffix Jr.; Given John; Family Clark; Other W; Given Robert; Family Bryan; Other M; Given Claudia; Family Robertson; title The myogenic response in isolated rat cerebrovascular arteries: smooth muscle cell model; volume 25; first_page 691; title Medical Engineering and Physics; W3CDTF 2003-10; last_page 709
// reference: subject_type keyword; signal transduction; rat; myogenesis; calcium dynamics; electrophysiology; cerebral arteries; Smooth Muscle Cell; smooth muscle
// species: Rat
def model yang_2003 as
  // The myogenic response in isolated rat cerebrovascular arteries: a smooth muscle cell model
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model does not run in OpenCell or COR due to missing parameter values.
  //
  // Model Structure
  //
  // ABSTRACT: Previous models of the cerebrovascular smooth muscle cell have not addressed the interaction between the electrical, chemical, and mechanical components of cell function during the development of active tension. These models are primarily electrical, biochemical or mechanical in their orientation, and do not permit a full exploration of how the smooth muscle responds to electrical or mechanical forcing. To address this issue, we have developed a new model that consists of two major components: electrochemical and chemomechanical subsystem models of the smooth muscle cell. Included in the electrochemical model are models of the electrophysiological behavior of the cell membrane, fluid compartments, Ca2+ release and uptake by the sarcoplasmic reticulum (SR), and cytosolic Ca2+ buffering, particularly by calmodulin (CM). With this subsystem model, we can study the mechanics of the production of intracellular Ca2+ transient in response to membrane voltage clamp pulses. The chemomechanical model includes models of: (a) the chemical kinetics of myosin phosphorylation, and the formation of phosphorylated (cycling) myosin cross-bridges with actin, as well as attached (non-cycling) latch-type cross-bridges; and (b) a model of force generation and mechanical coupling to the contractile filaments and their attachments to protein structures and the skeletal framework of the cell. The two subsystem models are tested independently and compared with data. Likewise, the complete (combined) cell model responses to voltage pulse stimulation under isometric and isotonic conditions are calculated and compared with measured single cell length-force and force-velocity data obtained from literature. This integrated cell model provides biophysically based explanations of electrical, chemical, and mechanical phenomena in cerebrovascular smooth muscle, and has considerable utility as an adjunct to laboratory research and experimental design.
  //
  // The original paper reference is cited below:
  //
  // The myogenic response in isolated rat cerebrovascular arteries: smooth muscle cell model, Jin Yang, John W. Clark Jr., Robert M. Bryan, and Claudia Robertson, 2003, Medical Engineering and Physics, 25, 691-709. PubMed ID: 12900184 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12900184&dopt=Abstract)
  //
  // cell diagram
  //
  // Schematic diagrams of: A) the electrochemical model; B) the multi-state kinetic model of CaCM dependent myosin phosphorylation and cross-bridge formation; and C) functional block diagram of the whole integrated smooth muscle cell model.
  def unit mmHg as base unit;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit mV_per_logmM as base unit;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre_per_ms as
    unit metre {pref: micro};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit microN as
    unit newton {pref: micro};
  enddef;
  def unit microN_per_micrometre as
    unit newton {pref: micro};
    unit metre {pref: micro, expo: -1};
  enddef;
  def unit microN_ms_per_micrometre as
    unit newton {pref: micro};
    unit millisecond;
    unit metre {pref: micro, expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit millisecond {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit third_order_rate_constant as
    unit millimolar {expo: -2};
    unit millisecond {expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {pref: kilo, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit picol as
    unit litre {pref: pico};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -56.1257, pub: out};
    var R: millijoule_per_mole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 293, pub: out};
    var F: coulomb_per_mole {init: 96487, pub: out};
    var Cm: picoF;
    var time: millisecond {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_K: picoA {pub: in};
    var i_K_Ca: picoA {pub: in};
    var i_Ki: picoA {pub: in};
    var i_M: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_B: picoA {pub: in};
    ode(V, time) = -1{dimensionless}/Cm*(i_Ca_L+i_K+i_K_Ca+i_Ki+i_M+i_NaCa+i_NaK+i_CaP+i_B);
  enddef;

  def comp L_type_calcium_current as
    var i_Ca_L: picoA {pub: out};
    var E_Ca_L: millivolt;
    var g_Ca_L: nanoS {init: 1.4151};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    i_Ca_L = g_Ca_L*d*f*(V-E_Ca_L);
    E_Ca_L = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
  enddef;

  def comp L_type_calcium_current_d_gate as
    var d: dimensionless {init: 0.00046, pub: out};
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+1.878{millivolt})/7.5704{millivolt}));
    tau_d = 2.8928{millisecond}*exp(-sqr((V+8.6344{millivolt})/12.3884{millivolt}))+2.4343{millisecond};
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp L_type_calcium_current_f_gate as
    var f: dimensionless {pub: out};
    var f_infinity: dimensionless;
    var tau_ff: millisecond;
    var ff: dimensionless {init: 1};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+29.3188{millivolt})/1.5389{millivolt}));
    tau_ff = 295.5937{millisecond}*exp(-sqr((V-4.7187{millivolt})/112.545{millivolt}))+23.1907{millisecond};
    ode(ff, time) = (f_infinity-ff)/tau_ff;
    f = 0.74{dimensionless}*ff+0.26{dimensionless};
  enddef;

  def comp calcium_activated_potassium_current as
    var i_K_Ca: picoA {pub: out};
    var E_K: millivolt {pub: out};
    var g_K_Ca: nanoS {init: 0.5};
    var Ca_i: millimolar {pub: in, priv: out};
    var K_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var P_K_Ca: dimensionless {priv: in};
    i_K_Ca = g_K_Ca*P_K_Ca*(V-E_K);
    E_K = R*T/F*ln(K_o/K_i);
  enddef;

  def comp calcium_activated_potassium_current_P_K_Ca_gate as
    var P_K_Ca: dimensionless {pub: out};
    var Ps: dimensionless {init: 0.00032};
    var Pf: dimensionless {init: 0.00032};
    var Ps_infinity: dimensionless;
    var Pf_infinity: dimensionless;
    var Po_infinity: dimensionless;
    var tau_Ps: millisecond {init: 11.5};
    var tau_Pf: millisecond {init: 0.5};
    var V_1_2_K_Ca: millivolt {init: 20.5};
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    Po_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-V_1_2_K_Ca)/21.7{millivolt}));
    V_1_2_K_Ca = -45{millivolt}*log(Ca_i)-198.55{millivolt};
    Pf_infinity = Ps_infinity-Po_infinity;
    ode(Pf, time) = (Pf_infinity-Pf)/tau_Pf;
    ode(Ps, time) = (Ps_infinity-Ps)/tau_Ps;
    P_K_Ca = 0.65{dimensionless}*Pf+0.35{dimensionless}*Ps;
  enddef;

  def comp delayed_rectifier_current as
    var i_K: picoA {pub: out};
    var g_K: nanoS {init: 9.8325};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Pk: dimensionless {priv: in};
    i_K = g_K*sqr(Pk)*(V-E_K);
  enddef;

  def comp delayed_rectifier_current_Pk_gate as
    var Pk: dimensionless {pub: out};
    var P1: dimensionless {init: 0.0159};
    var P2: dimensionless {init: 0.0159};
    var Pk_infinity: dimensionless;
    var tau_P1: millisecond;
    var tau_P2: millisecond;
    var V_1_2: millivolt {init: -1.77};
    var k: dimensionless {init: 14.52};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    Pk_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-V_1_2)/k));
    tau_P1 = 210.9873{millisecond}*exp(-sqr((V+214.3355{millivolt})/195.3502{millivolt}))-20.5866{millisecond};
    tau_P2 = 821.3949{millisecond}*exp(-sqr((V+31.5891{millivolt})/27.4568{millivolt}))-0.1892{millisecond};
    ode(P2, time) = (Pk_infinity-P2)/tau_P2;
    ode(P1, time) = (Pk_infinity-P1)/tau_P1;
    Pk = 0.58{dimensionless}*P1+0.42{dimensionless}*P2;
  enddef;

  def comp stretch_sensitive_current as
    var i_M: picoA {pub: out};
    var i_M_K: picoA {pub: out};
    var i_M_Na: picoA {pub: out};
    var i_M_Ca: picoA {pub: out};
    var Am: cm2 {init: 1.3863e-5};
    var Pm: dimensionless;
    var P_Na: dimensionless {init: 2};
    var P_Ca: dimensionless {init: 1};
    var P_K: dimensionless {init: 3};
    var sigma_1_2: mmHg {init: 204};
    var sigma: dimensionless;
    var k_sigma: mmHg {init: 2.03};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var Ca_i: micromolar {pub: in};
    var Ca_o: millimolar {pub: in};
    i_M = i_M_K+i_M_Na+i_M_Ca;
    i_M_K = Am*Pm*sqr(F)*V/(R*T)*P_K*(K_o-K_i*exp(F*V/(R*T)))/(1{dimensionless}-exp(F*V/(R*T)));
    i_M_Na = Am*Pm*sqr(F)*V/(R*T)*P_Na*(Na_o-Na_i*exp(F*V/(R*T)))/(1{dimensionless}-exp(F*V/(R*T)));
    i_M_Ca = Am*Pm*sqr(F)*V/(R*T)*sqr(2{dimensionless})*P_Ca*(Ca_o-Ca_i*exp(F*V/(R*T)))/(1{dimensionless}-exp(F*V/(R*T)));
    Pm = 1{dimensionless}/(1{dimensionless}+exp(-(sigma-sigma_1_2)/k_sigma));
  enddef;

  def comp inward_rectifier_current as
    var i_Ki: picoA {pub: out};
    var g_max_Ki: nanoS;
    var G_Ki: dimensionless {init: 0.145};
    var V_1_2_Ki: millivolt {init: 31.5};
    var n_Ki: dimensionless {init: 0.5};
    var A: mV_per_logmM {init: 25.19};
    var B: millivolt {init: 112.29};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    i_Ki = g_max_Ki*(V-E_K)/(1{dimensionless}+exp(-(V-V_1_2_Ki)/28.89{dimensionless}));
    g_max_Ki = G_Ki*K_o*n_Ki;
    V_1_2_Ki = A*log(K_i)+B;
  enddef;

  def comp calcium_pump as
    var i_CaP: picoA {pub: out};
    var I_Ca_P: picoA;
    var K_CaCM: dimensionless {pub: in};
    var CaCM: millimolar {pub: in};
    i_CaP = I_Ca_P*CaCM/(CaCM+K_CaCM);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var I_NaK: picoA;
    var Km_Nai: millimolar;
    var Km_Ko: millimolar;
    var V: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    i_NaK = I_NaK*K_o/(K_o+Km_Ko)*pow(Na_i, 1.5{dimensionless})/(pow(Na_i, 1.5{dimensionless})+pow(Km_Nai, 1.5{dimensionless}))*(V+150{millivolt})/(V+200{millivolt});
  enddef;

  def comp sodium_calcium_exchanger as
    var i_NaCa: picoA {pub: out};
    var g_NaCa: nanoS;
    var d_NaCa: millimolar;
    var phi_R: dimensionless;
    var phi_F: dimensionless;
    var gamma: dimensionless;
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    i_NaCa = g_NaCa*(pow(Na_i, 3{dimensionless})*Ca_o*phi_F-pow(Na_o, 3{dimensionless})*Ca_i)/(1{dimensionless}+pow(Na_o, 3{dimensionless})*Ca_i*phi_R+pow(Na_i, 3{dimensionless})*Ca_o);
    phi_F = exp(gamma*V*F/(R*T));
    phi_R = exp((1{dimensionless}-gamma)*V*F/(R*T));
  enddef;

  def comp background_currents as
    var i_B: picoA {pub: out};
    var i_B_Na: picoA {pub: out};
    var i_B_Ca: picoA {pub: out};
    var i_B_K: picoA {pub: out};
    var g_Nab: nanoS {init: 0.01};
    var g_Cab: nanoS {init: 0.012};
    var g_Kb: nanoS {init: 0.01};
    var E_Na: millivolt;
    var E_Ca: millivolt;
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var E_K: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    i_B = i_B_Na+i_B_Ca+i_B_K;
    i_B_Na = g_Nab*(V-E_Na);
    i_B_Ca = g_Cab*(V-E_Ca);
    i_B_K = g_Kb*(V-E_K);
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
  enddef;

  def comp extracellular_ionic_concentrations as
    var Na_o: millimolar {init: 140, pub: out};
    var Ca_o: millimolar {init: 2, pub: out};
    var K_o: millimolar {init: 5, pub: out};
  enddef;

  def comp intracellular_ionic_concentrations as
    var Na_i: millimolar {init: 5.06, pub: out};
    var Ca_i: nanomolar {init: 100.92, pub: out};
    var K_i: millimolar {init: 91.03, pub: out};
    var CaCM: millimolar {pub: out};
    var S_CM_Ca: millimolar {init: 0.1};
    var S_CM_cal: millimolar {init: 0.072};
    var CaS_CM: millimolar;
    var B_F_Ca: millimolar {init: 0.4};
    var B_F_cal: millimolar {init: 0.336};
    var CaB_F: millimolar;
    var k1: second_order_rate_constant;
    var k_1: first_order_rate_constant;
    var kd: second_order_rate_constant;
    var k_d: first_order_rate_constant;
    var Vol_Ca: picol {init: 0.7};
    var Vol_i: picol {init: 1};
    var delta_S_CM_cal: second_order_rate_constant;
    var delta_B_F_cal: second_order_rate_constant;
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_M_Na: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_K_Ca: picoA {pub: in};
    var i_K: picoA {pub: in};
    var i_Ki: picoA {pub: in};
    var i_B_K: picoA {pub: in};
    var i_M_K: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_M_Ca: picoA {pub: in};
    var i_up: picoA {pub: in};
    var i_rel: picoA {pub: in};
    ode(Na_i, time) = -(3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa+i_B_Na+i_M_Na)/(F*Vol_i);
    ode(K_i, time) = -(i_K+i_K_Ca+i_Ki+i_B_K+i_M_K-2{dimensionless}*i_NaK)/(F*Vol_i);
    ode(Ca_i, time) = -(i_Ca_L+i_CaP+i_B_Ca+i_M_Ca+i_up-(2{dimensionless}*i_NaCa+i_rel))/(2{dimensionless}*F*Vol_Ca)+delta_S_CM_cal+delta_B_F_cal;
    ode(S_CM_cal, time) = delta_S_CM_cal;
    delta_S_CM_cal = k_1*CaS_CM-k1*Ca_i*S_CM_cal;
    CaS_CM = CaCM;
    CaCM = S_CM_Ca-S_CM_cal;
    ode(B_F_cal, time) = delta_B_F_cal;
    delta_B_F_cal = k_d*CaB_F-kd*Ca_i*B_F_cal;
    CaB_F = B_F_Ca-B_F_cal;
  enddef;

  def comp calcium_fluxes_in_the_SR as
    var i_rel: picoA {pub: out};
    var i_up: picoA {pub: out};
    var Ca_up: millimolar {init: 0.5687};
    var i_tr: picoA;
    var I_up: picoA {init: 200};
    var tau_rel: millisecond {init: 0.0333};
    var tau_tr: millisecond {init: 1000};
    var Ca_u: millimolar;
    var Ca_r: millimolar;
    var Vol_u: picol {init: 0.07};
    var Vol_r: picol {init: 0.07};
    var Km_up: micromolar {init: 0.08};
    var time: millisecond {pub: in};
    var Ca_i: micromolar {pub: in};
    var R10: dimensionless {pub: in};
    var F: coulomb_per_mole {pub: in};
    i_up = I_up*Ca_i/(Ca_i+Km_up);
    i_tr = (Ca_u-Ca_r)*2{dimensionless}*F*Vol_u/tau_tr;
    i_rel = sqr(R10)*(Ca_u-Ca_r)*2{dimensionless}*F*Vol_r/tau_rel;
    ode(Ca_up, time) = (i_up-i_tr)/(2{dimensionless}*F*Vol_u);
    ode(Ca_r, time) = (i_tr-i_rel)/(2{dimensionless}*F*Vol_r);
  enddef;

  def comp CICR_mechanism_of_the_SR as
    var R10: dimensionless {init: 0.0033, pub: out};
    var R00: dimensionless {init: 0.001196};
    var R01: dimensionless {init: 0.9955};
    var R11: dimensionless {init: 4e-6};
    var Kr1: third_order_rate_constant {init: 2500};
    var Kr2: second_order_rate_constant {init: 1.05};
    var Kr1_: first_order_rate_constant {init: 0.0076};
    var Kr2_: first_order_rate_constant {init: 0.084};
    var Ca_i: micromolar {pub: in};
    R00 = Kr1_*R10+Kr2_*R01-(Kr1*sqr(Ca_i)+Kr2*Ca_i)*R00;
    R10 = Kr1*sqr(Ca_i)*R00+Kr2_*R11-(Kr2*Ca_i+Kr1_)*R10;
    R11 = Kr1*sqr(Ca_i)*R01+Kr2*Ca_i*R10-(Kr2_+Kr1_)*R11;
    R01 = Kr1_*R11+Kr2*Ca_i*R00-(Kr1*sqr(Ca_i)+Kr2_)*R01;
  enddef;

  def comp smooth_muscle_contraction as
    var K_CaCM: dimensionless {init: 1.78e-7, pub: out};
    var AM: dimensionless {init: 0.2798, pub: out};
    var AMp: dimensionless {init: 0.0627, pub: out};
    var Mp: dimensionless {init: 0.0476};
    var M: dimensionless {init: 0.6099};
    var K1: first_order_rate_constant;
    var K2: first_order_rate_constant {init: 0.4};
    var K3: first_order_rate_constant {init: 1.8};
    var K4: first_order_rate_constant {init: 0.1};
    var K5: first_order_rate_constant {init: 0.4};
    var K6: first_order_rate_constant;
    var K7: first_order_rate_constant {init: 0.045};
    var CaCM: millimolar {pub: in};
    M = K2*Mp+K7*AM-K1*M;
    Mp = K1*M+K4*AMp-(K2+K3)*Mp;
    AMp = K6*AM+K3*Mp-(K5+K4)*AMp;
    AM = K5*AMp-(K7+K6)*AM;
    K1 = K6;
    K6 = sqr(CaCM)/(sqr(CaCM)+sqr(K_CaCM));
  enddef;

  def comp passive_force as
    var Fp: microN;
    var kp: microN {init: 0.1};
    var alpha_p: dimensionless {init: 0.1};
    var l0: micrometre {init: 40};
    var lc: micrometre;
    Fp = kp*(exp(alpha_p*(lc-l0)/l0)-1{dimensionless});
  enddef;

  def comp cross_bridge_elasticity as
    var beta: dimensionless {init: 7.5, pub: out};
    var la: micrometre {pub: out};
    var lopt: micrometre {init: 100, pub: out};
    var Fx: microN;
    var kx1: microN_per_micrometre {init: 12.5};
    var kx2: microN_per_micrometre {init: 8.8};
    var lx: micrometre {init: 89.6};
    var AM: dimensionless {pub: in};
    var AMp: dimensionless {pub: in};
    Fx = (kx1*AMp+kx2*AM)*lx*exp(-beta*sqr((la-lopt)/lopt));
  enddef;

  def comp active_force_generation as
    var Fa: microN;
    var vx: micrometre_per_ms {init: 5};
    var ia: micrometre_per_ms;
    var fAMp: microN_ms_per_micrometre {init: 1.3};
    var fAM: microN_per_micrometre {init: 85.5};
    var beta: dimensionless {pub: in};
    var la: micrometre {pub: in};
    var lopt: micrometre {pub: in};
    var AM: dimensionless {pub: in};
    var AMp: dimensionless {pub: in};
    Fa = (fAMp*AMp*(vx+ia)+fAM*AM*ia)*exp(-beta*sqr((la-lopt)/lopt));
  enddef;

  def comp series_viscoelastic_force as
    var Fs: microN;
    var ks: microN {init: 0.2};
    var alpha_s: dimensionless {init: 4.5};
    var ls: micrometre {init: 37.05};
    var delta_ls: micrometre_per_ms;
    var ls0: micrometre {init: 30};
    var mu_s: microN_ms_per_micrometre {init: 0.01};
    var time: millisecond {pub: in};
    Fs = mu_s*delta_ls+ks*(exp(alpha_s*(ls-ls0)/ls0)-1{dimensionless});
    ode(ls, time) = delta_ls;
  enddef;

  def group as containment for
    comp membrane incl
      comp L_type_calcium_current incl
        comp L_type_calcium_current_d_gate;
        comp L_type_calcium_current_f_gate;
      endcomp;
      comp calcium_activated_potassium_current incl
        comp calcium_activated_potassium_current_P_K_Ca_gate;
      endcomp;
      comp delayed_rectifier_current incl
        comp delayed_rectifier_current_Pk_gate;
      endcomp;
      comp stretch_sensitive_current;
      comp inward_rectifier_current;
      comp calcium_pump;
      comp sodium_potassium_pump;
      comp sodium_calcium_exchanger;
      comp background_currents;
      comp extracellular_ionic_concentrations;
      comp intracellular_ionic_concentrations;
      comp calcium_fluxes_in_the_SR;
      comp CICR_mechanism_of_the_SR;
      comp smooth_muscle_contraction;
      comp passive_force;
      comp cross_bridge_elasticity;
      comp active_force_generation;
      comp series_viscoelastic_force;
    endcomp;
  enddef;

  def group as encapsulation for
    comp L_type_calcium_current incl
      comp L_type_calcium_current_d_gate;
      comp L_type_calcium_current_f_gate;
    endcomp;
    comp calcium_activated_potassium_current incl
      comp calcium_activated_potassium_current_P_K_Ca_gate;
    endcomp;
    comp delayed_rectifier_current incl
      comp delayed_rectifier_current_Pk_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_current and environment for
    vars time and time;
  enddef;
  def map between calcium_activated_potassium_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes_in_the_SR and environment for
    vars time and time;
  enddef;
  def map between series_viscoelastic_force and environment for
    vars time and time;
  enddef;
  def map between membrane and L_type_calcium_current for
    vars V and V;
    vars F and F;
    vars T and T;
    vars R and R;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane and calcium_activated_potassium_current for
    vars V and V;
    vars F and F;
    vars T and T;
    vars R and R;
    vars i_K_Ca and i_K_Ca;
  enddef;
  def map between membrane and delayed_rectifier_current for
    vars V and V;
    vars i_K and i_K;
  enddef;
  def map between membrane and stretch_sensitive_current for
    vars V and V;
    vars F and F;
    vars T and T;
    vars R and R;
    vars i_M and i_M;
  enddef;
  def map between membrane and inward_rectifier_current for
    vars V and V;
    vars i_Ki and i_Ki;
  enddef;
  def map between membrane and calcium_pump for
    vars i_CaP and i_CaP;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars V and V;
    vars F and F;
    vars T and T;
    vars R and R;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars F and F;
    vars T and T;
    vars R and R;
    vars i_B and i_B;
  enddef;
  def map between membrane and intracellular_ionic_concentrations for
    vars F and F;
  enddef;
  def map between membrane and calcium_fluxes_in_the_SR for
    vars F and F;
  enddef;
  def map between intracellular_ionic_concentrations and L_type_calcium_current for
    vars Ca_i and Ca_i;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between extracellular_ionic_concentrations and L_type_calcium_current for
    vars Ca_o and Ca_o;
  enddef;
  def map between intracellular_ionic_concentrations and calcium_activated_potassium_current for
    vars K_i and K_i;
    vars Ca_i and Ca_i;
    vars i_K_Ca and i_K_Ca;
  enddef;
  def map between extracellular_ionic_concentrations and calcium_activated_potassium_current for
    vars K_o and K_o;
  enddef;
  def map between intracellular_ionic_concentrations and delayed_rectifier_current for
    vars i_K and i_K;
  enddef;
  def map between intracellular_ionic_concentrations and stretch_sensitive_current for
    vars K_i and K_i;
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_M_Na and i_M_Na;
    vars i_M_Ca and i_M_Ca;
    vars i_M_K and i_M_K;
  enddef;
  def map between extracellular_ionic_concentrations and stretch_sensitive_current for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between intracellular_ionic_concentrations and inward_rectifier_current for
    vars K_i and K_i;
    vars i_Ki and i_Ki;
  enddef;
  def map between extracellular_ionic_concentrations and inward_rectifier_current for
    vars K_o and K_o;
  enddef;
  def map between intracellular_ionic_concentrations and calcium_pump for
    vars CaCM and CaCM;
    vars i_CaP and i_CaP;
  enddef;
  def map between intracellular_ionic_concentrations and sodium_potassium_pump for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between extracellular_ionic_concentrations and sodium_potassium_pump for
    vars K_o and K_o;
  enddef;
  def map between intracellular_ionic_concentrations and sodium_calcium_exchanger for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between extracellular_ionic_concentrations and sodium_calcium_exchanger for
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between intracellular_ionic_concentrations and background_currents for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars i_B_K and i_B_K;
  enddef;
  def map between extracellular_ionic_concentrations and background_currents for
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between intracellular_ionic_concentrations and calcium_fluxes_in_the_SR for
    vars i_up and i_up;
    vars i_rel and i_rel;
    vars Ca_i and Ca_i;
  enddef;
  def map between intracellular_ionic_concentrations and CICR_mechanism_of_the_SR for
    vars Ca_i and Ca_i;
  enddef;
  def map between intracellular_ionic_concentrations and smooth_muscle_contraction for
    vars CaCM and CaCM;
  enddef;
  def map between calcium_activated_potassium_current and delayed_rectifier_current for
    vars E_K and E_K;
  enddef;
  def map between calcium_activated_potassium_current and inward_rectifier_current for
    vars E_K and E_K;
  enddef;
  def map between calcium_activated_potassium_current and stretch_sensitive_current for
    vars E_K and E_K;
  enddef;
  def map between calcium_activated_potassium_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between calcium_fluxes_in_the_SR and CICR_mechanism_of_the_SR for
    vars R10 and R10;
  enddef;
  def map between smooth_muscle_contraction and calcium_pump for
    vars K_CaCM and K_CaCM;
  enddef;
  def map between smooth_muscle_contraction and cross_bridge_elasticity for
    vars AM and AM;
    vars AMp and AMp;
  enddef;
  def map between smooth_muscle_contraction and active_force_generation for
    vars AM and AM;
    vars AMp and AMp;
  enddef;
  def map between active_force_generation and cross_bridge_elasticity for
    vars beta and beta;
    vars la and la;
    vars lopt and lopt;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between calcium_activated_potassium_current and calcium_activated_potassium_current_P_K_Ca_gate for
    vars P_K_Ca and P_K_Ca;
    vars time and time;
    vars Ca_i and Ca_i;
    vars V and V;
  enddef;
  def map between delayed_rectifier_current and delayed_rectifier_current_Pk_gate for
    vars Pk and Pk;
    vars time and time;
    vars V and V;
  enddef;
enddef;
