def model Loewe_Lutz_Fabbri_Severi as
  // Loewe-Lutz-Fabbri-Severi human sinus node cellular electrophysiology model
  //
  // Loewe et al., Biophysical Journal 2019, doi:10.1016/j.bpj.2019.07.037 (https://doi.org/10.1016/j.bpj.2019.07.037)
  def unit mV as
    unit gram {expo: 1};
    unit metre {expo: 2};
    unit second {expo: -3};
    unit ampere {expo: -1};
  enddef;
  def unit s2_A_per_g_per_m2 as
    unit gram {expo: -1};
    unit metre {expo: -2};
    unit second {expo: 2};
    unit ampere {expo: 1};
  enddef;
  def unit per_mV as
    unit gram {expo: -1};
    unit metre {expo: -2};
    unit second {expo: 3};
    unit ampere {expo: 1};
  enddef;
  def unit nA as
    unit ampere {expo: 1, mult: 1e-09};
  enddef;
  def unit uS as
    unit gram {expo: -1, mult: 1e-09};
    unit metre {expo: -2};
    unit second {expo: 3};
    unit ampere {expo: 2};
  enddef;
  def unit mM as
    unit metre {expo: -3};
    unit mole {expo: 1};
  enddef;
  def unit uF as
    unit gram {expo: -1, mult: 1e-09};
    unit metre {expo: -2};
    unit second {expo: 4};
    unit ampere {expo: 2};
  enddef;
  def unit C_per_mol as
    unit second {expo: 1};
    unit ampere {expo: 1};
    unit mole {expo: -1};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram {expo: 1};
    unit metre {expo: 2};
    unit second {expo: -2};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit uL as
    unit metre {expo: 3, mult: 1e-09};
  enddef;
  def unit 1_times_1000000000 as
    unit dimensionless {expo: 1, mult: 1000000000.0};
  enddef;
  def unit um as
    unit metre {expo: 1, mult: 1e-06};
  enddef;
  def unit 1_times_1000000 as
    unit dimensionless {expo: 1, mult: 1000000.0};
  enddef;
  def unit uM as
    unit metre {expo: -3, mult: 0.001};
    unit mole {expo: 1};
  enddef;
  def unit m3_per_s_per_mol as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit m3_A_per_mol_times_1e_minus_09 as
    unit metre {expo: 3, mult: 1e-09};
    unit ampere {expo: 1};
    unit mole {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit metre {expo: -3};
    unit second {expo: -1};
    unit mole {expo: 1};
  enddef;
  def unit m6_per_s_per_mol2 as
    unit metre {expo: 6};
    unit second {expo: -1};
    unit mole {expo: -2};
  enddef;

  def comp Voltage_clamp as
    var t_test: second {init: 0.5};
    var t_holding: second {init: 0.5};
    var V_test: mV {init: -35.0};
    var V_clamp: mV {pub: out};
    var V_holding: mV {init: -45.0};
    var time: second {pub: in};
    V_clamp = sel
      case (time > t_holding) and (time < t_holding+t_test):
        V_test;
      otherwise:
        V_holding;
    endsel;
  enddef;

  def comp i_Na_m_gate as
    var tau_m: second;
    var alpha_m: becquerel;
    var m: dimensionless {init: 0.3777047, pub: out};
    var m_infinity: dimensionless;
    var E0_m: mV;
    var delta_m: mV {init: 1e-05};
    var beta_m: becquerel;
    var V: mV {pub: in};
    var time: second {pub: in};
    tau_m = 1.0{dimensionless}/(alpha_m+beta_m);
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000.0{becquerel};
      otherwise:
        200.0{s2_A_per_g_per_m2}*E0_m/(1.0{dimensionless}-exp(-0.1{per_mV}*E0_m));
    endsel;
    ode(m, time) = (m_infinity-m)/tau_m;
    m_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+42.0504{mV})/8.3106{mV}));
    E0_m = V+41.0{mV};
    beta_m = 8000.0{becquerel}*exp(-0.056{per_mV}*(V+66.0{mV}));
  enddef;

  def comp i_f as
    var i_f_i_f: nA {pub: out};
    var g_f_K: uS {init: 0.0117};
    var i_fNa: nA {pub: out};
    var g_f_Na: uS {init: 0.00696};
    var i_fK: nA {pub: out};
    var y: dimensionless {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    i_f_i_f = i_fNa+i_fK;
    i_fNa = y*g_f_Na*(V-E_Na);
    i_fK = y*g_f_K*(V-E_K);
  enddef;

  def comp i_Kur_rKur_gate as
    var r_Kur: dimensionless {init: 9.059024e-03, pub: out};
    var r_Kur_infinity: dimensionless;
    var tau_r_Kur: second;
    var V: mV {pub: in};
    var time: second {pub: in};
    ode(r_Kur, time) = (r_Kur_infinity-r_Kur)/tau_r_Kur;
    r_Kur_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+6.0{mV})/(-8.6{mV})));
    tau_r_Kur = 0.009{second}/(1.0{dimensionless}+exp((V+5.0{mV})/12.0{mV}))+0.0005{second};
  enddef;

  def comp i_Kr_pa_gate as
    var pa_infinity: dimensionless;
    var paS: dimensionless {init: 0.3450797, pub: out};
    var tau_paS: second;
    var paF: dimensionless {init: 8.34449800000000054e-03, pub: out};
    var tau_paF: second;
    var V: mV {pub: in};
    var time: second {pub: in};
    pa_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+10.0144{mV})/7.6607{mV}));
    ode(paS, time) = (pa_infinity-paS)/tau_paS;
    tau_paS = 0.84655354{second}/(4.2{dimensionless}*exp(V/17.0{mV})+0.15{dimensionless}*exp(-V/21.6{mV}));
    ode(paF, time) = (pa_infinity-paF)/tau_paF;
    tau_paF = 1.0{second}/(30.0{dimensionless}*exp(V/10.0{mV})+exp(-V/12.0{mV}));
  enddef;

  def comp i_Ks_n_gate as
    var tau_n: second;
    var alpha_n: becquerel;
    var n: dimensionless {init: 0.1057902, pub: out};
    var i_Ks_n_gate_Iso_shift: mV;
    var n_infinity: dimensionless;
    var beta_n: becquerel;
    var V: mV {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var time: second {pub: in};
    tau_n = 1.0{dimensionless}/(alpha_n+beta_n);
    alpha_n = 28.0{becquerel}/(1.0{dimensionless}+exp(-(V-40.0{mV}-i_Ks_n_gate_Iso_shift)/3.0{mV}));
    ode(n, time) = (n_infinity-n)/tau_n;
    i_Ks_n_gate_Iso_shift = sel
      case Iso_1_uM > 0.0{dimensionless}:
        -14.0{mV};
      otherwise:
        0.0{mV};
    endsel;
    n_infinity = sqrt(1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+0.6383{mV}-i_Ks_n_gate_Iso_shift)/10.7071{mV})));
    beta_n = 1.0{becquerel}*exp(-(V-i_Ks_n_gate_Iso_shift-5.0{mV})/25.0{mV});
  enddef;

  def comp i_Kr as
    var g_Kr: uS;
    var i_Kr_i_Kr: nA {pub: out};
    var Ko: mM {pub: in};
    var E_K: mV {pub: in};
    var paS: dimensionless {pub: in};
    var V: mV {pub: in};
    var piy: dimensionless {pub: in};
    var paF: dimensionless {pub: in};
    g_Kr = 0.004989099{uS}*sqrt(Ko/5.4{mM});
    i_Kr_i_Kr = g_Kr*(V-E_K)*(0.9{dimensionless}*paF+0.1{dimensionless}*paS)*piy;
  enddef;

  def comp Membrane as
    var C: uF {init: 5.7e-05};
    var V_ode: mV {init: -46.1899};
    var F: C_per_mol {init: 9.64853414999999950e+04, pub: out};
    var clamp_mode: dimensionless {init: 0.0};
    var Membrane_R: mJ_per_mol_per_K {init: 8314.472};
    var T: kelvin {init: 310.0};
    var V: mV {pub: out};
    var i_tot: nA;
    var RTONF: mV {pub: out};
    var i_Kur_i_Kur: nA {pub: in};
    var i_Kr_i_Kr: nA {pub: in};
    var i_f_i_f: nA {pub: in};
    var i_CaL_i_CaL: nA {pub: in};
    var i_CaT_i_CaT: nA {pub: in};
    var i_Ks_i_Ks: nA {pub: in};
    var i_NaK_i_NaK: nA {pub: in};
    var i_NaCa_i_NaCa: nA {pub: in};
    var i_KACh_i_KACh: nA {pub: in};
    var i_Na_i_Na: nA {pub: in};
    var i_SK_i_SK: nA {pub: in};
    var i_to_i_to: nA {pub: in};
    var time: second {pub: in};
    var V_clamp: mV {pub: in};
    ode(V_ode, time) = -i_tot/C;
    V = sel
      case clamp_mode >= 1.0{dimensionless}:
        V_clamp;
      otherwise:
        V_ode;
    endsel;
    i_tot = i_f_i_f+i_Kr_i_Kr+i_Ks_i_Ks+i_to_i_to+i_NaK_i_NaK+i_NaCa_i_NaCa+i_Na_i_Na+i_CaL_i_CaL+i_CaT_i_CaT+i_KACh_i_KACh+i_Kur_i_Kur+i_SK_i_SK;
    RTONF = Membrane_R*T/F;
  enddef;

  def comp i_NaK as
    var i_NaK_max: nA {init: 0.137171};
    var Km_Nap: mM {init: 14.0};
    var Km_Kp: mM {init: 1.4};
    var i_NaK_i_NaK: nA {pub: out};
    var i_NaK_Iso_increase: dimensionless;
    var Iso_1_uM: dimensionless {pub: in};
    var E_Na: mV {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var V: mV {pub: in};
    i_NaK_i_NaK = i_NaK_Iso_increase*i_NaK_max*pow(1.0{dimensionless}+pow(Km_Kp/Ko, 1.2{dimensionless}), -1.0{dimensionless})*pow(1.0{dimensionless}+pow(Km_Nap/Nai, 1.3{dimensionless}), -1.0{dimensionless})*pow(1.0{dimensionless}+exp(-(V-E_Na+110.0{mV})/20.0{mV}), -1.0{dimensionless});
    i_NaK_Iso_increase = sel
      case Iso_1_uM > 0.0{dimensionless}:
        1.2{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
  enddef;

  def comp Cell_parameters as
    var V_nsr_part: dimensionless {init: 0.0116};
    var V_sub: uL {pub: out};
    var R_cell: um {init: 3.9};
    var V_jsr_part: dimensionless {init: 0.0012};
    var V_i_part: dimensionless {init: 0.46};
    var L_cell: um {init: 67.0};
    var V_nsr: uL {pub: out};
    var V_jsr: uL {pub: out};
    var V_i: uL {pub: out};
    var L_sub: um {init: 0.02};
    var V_cell: uL;
    V_sub = 1e-09{1_times_1000000000}*2.0{dimensionless}*3.14159265359{dimensionless}*L_sub*(R_cell-L_sub/2.0{dimensionless})*L_cell;
    V_nsr = V_nsr_part*V_cell;
    V_jsr = V_jsr_part*V_cell;
    V_i = V_i_part*V_cell-V_sub;
    V_cell = 1e-09{1_times_1000000000}*3.14159265359{dimensionless}*sqr(R_cell)*L_cell;
  enddef;

  def comp Nai_concentration as
    var Nai: mM {init: 6.084085, pub: out};
    var i_fNa: nA {pub: in};
    var i_siNa: nA {pub: in};
    var V_i: uL {pub: in};
    var F: C_per_mol {pub: in};
    var V_sub: uL {pub: in};
    var i_NaK_i_NaK: nA {pub: in};
    var i_NaCa_i_NaCa: nA {pub: in};
    var time: second {pub: in};
    var i_Na_i_Na: nA {pub: in};
    ode(Nai, time) = -1.0{1_times_1000000}*(i_Na_i_Na+i_fNa+i_siNa+3.0{dimensionless}*i_NaK_i_NaK+3.0{dimensionless}*i_NaCa_i_NaCa)/(1.0{1_times_1000000}*(V_i+V_sub)*F);
  enddef;

  def comp i_NaCa as
    var k21: dimensionless;
    var Kcni: mM {init: 26.44};
    var Qci: dimensionless {init: 0.1369};
    var Qco: dimensionless {init: 0.0};
    var k12: dimensionless;
    var k34: dimensionless;
    var i_NaCa_i_NaCa: nA {pub: out};
    var k14: dimensionless;
    var Kco: mM {init: 3.663};
    var Kci: mM {init: 0.0207};
    var K_NaCa: nA {init: 3.343};
    var do: dimensionless;
    var di: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x1: dimensionless;
    var x4: dimensionless;
    var Qn: dimensionless {init: 0.4315};
    var K3no: mM {init: 4.663};
    var K3ni: mM {init: 26.44};
    var K2ni: mM {init: 2.289};
    var k23: dimensionless;
    var k32: dimensionless;
    var k41: dimensionless;
    var K2no: mM {init: 561.4};
    var k43: dimensionless;
    var K1no: mM {init: 1628.0};
    var K1ni: mM {init: 395.3};
    var Nai: mM {pub: in};
    var V: mV {pub: in};
    var RTONF: mV {pub: in};
    var Ca_sub: mM {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    k21 = Cao/Kco*exp(Qco*V/RTONF)/do;
    k12 = Ca_sub/Kci*exp(-Qci*V/RTONF)/di;
    k34 = Nao/(K3no+Nao);
    i_NaCa_i_NaCa = K_NaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    k14 = Nai/K1ni*Nai/K2ni*(1.0{dimensionless}+Nai/K3ni)*exp(Qn*V/(2.0{dimensionless}*RTONF))/di;
    do = 1.0{dimensionless}+Cao/Kco*(1.0{dimensionless}+exp(Qco*V/RTONF))+Nao/K1no*(1.0{dimensionless}+Nao/K2no*(1.0{dimensionless}+Nao/K3no));
    di = 1.0{dimensionless}+Ca_sub/Kci*(1.0{dimensionless}+exp(-Qci*V/RTONF)+Nai/Kcni)+Nai/K1ni*(1.0{dimensionless}+Nai/K2ni*(1.0{dimensionless}+Nai/K3ni));
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k23 = Nao/K1no*Nao/K2no*(1.0{dimensionless}+Nao/K3no)*exp(-Qn*V/(2.0{dimensionless}*RTONF))/do;
    k32 = exp(Qn*V/(2.0{dimensionless}*RTONF));
    k41 = exp(-Qn*V/(2.0{dimensionless}*RTONF));
    k43 = Nai/(K3ni+Nai);
  enddef;

  def comp i_CaT_dT_gate as
    var dT_infinity: dimensionless;
    var dT: dimensionless {init: 0.192108, pub: out};
    var tau_dT: second;
    var V: mV {pub: in};
    var time: second {pub: in};
    dT_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+38.3{mV})/5.5{mV}));
    ode(dT, time) = (dT_infinity-dT)/tau_dT;
    tau_dT = 0.001{second}/(1.068{dimensionless}*exp((V+38.3{mV})/30.0{mV})+1.068{dimensionless}*exp(-(V+38.3{mV})/30.0{mV}));
  enddef;

  def comp environment as
    var time: second {pub: out};
    time = 0.0{second};
  enddef;

  def comp i_SK_x_gate as
    var x: dimensionless {init: 6.77693899999999988e-02, pub: out};
    var x_infinity: dimensionless;
    var n_SK: dimensionless {init: 2.2};
    var tau_x: second;
    var EC50_SK: uM {init: 0.7};
    var Ca_sub: mM {pub: in};
    var time: second {pub: in};
    ode(x, time) = (x_infinity-x)/tau_x;
    x_infinity = 0.81{dimensionless}*pow(1000.0{dimensionless}*Ca_sub/1.0{mM}, n_SK)/(pow(1000.0{dimensionless}*Ca_sub/1.0{mM}, n_SK)+pow(EC50_SK/1.0{uM}, n_SK));
    tau_x = 0.001{second}/(0.047{dimensionless}*(1000.0{dimensionless}*Ca_sub/1.0{mM})+1.0{dimensionless}/76.0{dimensionless});
  enddef;

  def comp i_SK as
    var g_SK: uS {init: 0.000165};
    var i_SK_i_SK: nA {pub: out};
    var V: mV {pub: in};
    var E_K: mV {pub: in};
    var x: dimensionless {pub: in};
    i_SK_i_SK = g_SK*(V-E_K)*x;
  enddef;

  def comp i_Kur as
    var g_Kur: uS {init: 7.062e-05};
    var i_Kur_i_Kur: nA {pub: out};
    var s_Kur: dimensionless {pub: in};
    var E_K: mV {pub: in};
    var r_Kur: dimensionless {pub: in};
    var V: mV {pub: in};
    i_Kur_i_Kur = g_Kur*r_Kur*s_Kur*(V-E_K);
  enddef;

  def comp i_to_r_gate as
    var r_infinity: dimensionless;
    var r: dimensionless {init: 1.24570600000000007e-02, pub: out};
    var tau_r: second;
    var V: mV {pub: in};
    var time: second {pub: in};
    r_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-19.3{mV})/15.0{mV}));
    ode(r, time) = (r_infinity-r)/tau_r;
    tau_r = 0.001{dimensionless}*0.66{dimensionless}*1.4{dimensionless}*(15.59{second}/(1.037{dimensionless}*exp(0.09{per_mV}*(V+30.61{mV}))+0.369{dimensionless}*exp(-0.12{per_mV}*(V+23.84{mV})))+2.98{second});
  enddef;

  def comp i_Kur_sKur_gate as
    var s_Kur: dimensionless {init: 0.8655135, pub: out};
    var tau_s_Kur: second;
    var s_Kur_infinity: dimensionless;
    var V: mV {pub: in};
    var time: second {pub: in};
    ode(s_Kur, time) = (s_Kur_infinity-s_Kur)/tau_s_Kur;
    tau_s_Kur = 0.59{second}/(1.0{dimensionless}+exp((V+60.0{mV})/10.0{mV}))+3.05{second};
    s_Kur_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+7.5{mV})/10.0{mV}));
  enddef;

  def comp i_Ks as
    var g_Ks: uS;
    var i_Ks_i_Ks: nA {pub: out};
    var g_Ks_: uS {init: 8.63714000000000018e-04};
    var E_Ks: mV;
    var Iso_1_uM: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var V: mV {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var Ko: mM {pub: in};
    var RTONF: mV {pub: in};
    var Ki: mM {pub: in};
    g_Ks = sel
      case Iso_1_uM > 0.0{dimensionless}:
        1.2{dimensionless}*g_Ks_;
      otherwise:
        g_Ks_;
    endsel;
    i_Ks_i_Ks = g_Ks*(V-E_Ks)*sqr(n);
    E_Ks = RTONF*ln((Ko+0.12{dimensionless}*Nao)/(Ki+0.12{dimensionless}*Nai));
  enddef;

  def comp Ca_buffering as
    var delta_fTC: becquerel {pub: out};
    var kb_TMM: becquerel {init: 751.0};
    var kb_TMC: becquerel {init: 7.51};
    var kf_TMM: m3_per_s_per_mol {init: 2277.0};
    var kf_TMC: m3_per_s_per_mol {init: 227700.0};
    var kf_CQ: m3_per_s_per_mol {init: 1.75433543399999991e+02};
    var kb_TC: becquerel {init: 446.0};
    var Mgi: mM {init: 2.5};
    var kb_CM: becquerel {init: 542.0};
    var kb_CQ: becquerel {init: 445.0};
    var kf_TC: m3_per_s_per_mol {init: 88800.0};
    var TC_tot: mM {init: 0.031, pub: out};
    var TMC_tot: mM {init: 0.062, pub: out};
    var fCQ: dimensionless {init: 0.1878388};
    var delta_fTMC: becquerel {pub: out};
    var CQ_tot: mM {init: 10.0, pub: out};
    var delta_fTMM: becquerel;
    var delta_fCQ: becquerel {pub: out};
    var CM_tot: mM {init: 0.045, pub: out};
    var fCMs: dimensionless {init: 0.206602};
    var delta_fCMi: becquerel {pub: out};
    var fTC: dimensionless {init: 0.0246504};
    var fTMM: dimensionless {init: 0.5920168};
    var fCMi: dimensionless {init: 0.2776014};
    var fTMC: dimensionless {init: 0.329845};
    var kf_CM: m3_per_s_per_mol {init: 1.64198609899999993e+06};
    var delta_fCMs: becquerel {pub: out};
    var time: second {pub: in};
    var Ca_sub: mM {pub: in};
    var Ca_jsr: mM {pub: in};
    var Cai: mM {pub: in};
    delta_fTC = kf_TC*Cai*(1.0{dimensionless}-fTC)-kb_TC*fTC;
    ode(fCQ, time) = delta_fCQ;
    delta_fTMC = kf_TMC*Cai*(1.0{dimensionless}-(fTMC+fTMM))-kb_TMC*fTMC;
    delta_fTMM = kf_TMM*Mgi*(1.0{dimensionless}-(fTMC+fTMM))-kb_TMM*fTMM;
    delta_fCQ = kf_CQ*Ca_jsr*(1.0{dimensionless}-fCQ)-kb_CQ*fCQ;
    ode(fCMs, time) = delta_fCMs;
    delta_fCMi = kf_CM*Cai*(1.0{dimensionless}-fCMi)-kb_CM*fCMi;
    ode(fTC, time) = delta_fTC;
    ode(fTMM, time) = delta_fTMM;
    ode(fCMi, time) = delta_fCMi;
    ode(fTMC, time) = delta_fTMC;
    delta_fCMs = kf_CM*Ca_sub*(1.0{dimensionless}-fCMs)-kb_CM*fCMs;
  enddef;

  def comp i_to_q_gate as
    var q: dimensionless {init: 0.4735559, pub: out};
    var q_infinity: dimensionless;
    var tau_q: second;
    var V: mV {pub: in};
    var time: second {pub: in};
    ode(q, time) = (q_infinity-q)/tau_q;
    q_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+49.0{mV})/13.0{mV}));
    tau_q = 0.001{dimensionless}*0.6{dimensionless}*(65.17{dimensionless}/(0.57{becquerel}*exp(-0.08{per_mV}*(V+44.0{mV}))+0.065{becquerel}*exp(0.1{per_mV}*(V+45.93{mV})))+10.1{second});
  enddef;

  def comp i_to as
    var i_to_i_to: nA {pub: out};
    var g_to: uS {init: 1.67347999999999998e-03};
    var q: dimensionless {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var r: dimensionless {pub: in};
    i_to_i_to = g_to*(V-E_K)*q*r;
  enddef;

  def comp i_CaL as
    var P_CaL: m3_A_per_mol_times_1e_minus_09 {init: 0.5046812};
    var i_CaL_i_CaL: nA {pub: out};
    var i_siNa: nA {pub: out};
    var i_siK: nA {pub: out};
    var i_siCa: nA {pub: out};
    var i_CaL_Iso_increase: dimensionless;
    var ACh_block: dimensionless;
    var Iso_1_uM: dimensionless {pub: in};
    var ACh: mM {pub: in};
    var Ko: mM {pub: in};
    var fCa: dimensionless {pub: in};
    var V: mV {pub: in};
    var RTONF: mV {pub: in};
    var Ki: mM {pub: in};
    var dL: dimensionless {pub: in};
    var fL: dimensionless {pub: in};
    var Cao: mM {pub: in};
    var Ca_sub: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    i_CaL_i_CaL = (i_siCa+i_siK+i_siNa)*(1.0{dimensionless}-ACh_block)*i_CaL_Iso_increase;
    i_siNa = 1.85e-05{dimensionless}*P_CaL*(V-0.0{mV})/(RTONF*(1.0{dimensionless}-exp(-1.0{dimensionless}*(V-0.0{mV})/RTONF)))*(Nai-Nao*exp(-1.0{dimensionless}*(V-0.0{mV})/RTONF))*dL*fL*fCa;
    i_siK = 0.000365{dimensionless}*P_CaL*(V-0.0{mV})/(RTONF*(1.0{dimensionless}-exp(-1.0{dimensionless}*(V-0.0{mV})/RTONF)))*(Ki-Ko*exp(-1.0{dimensionless}*(V-0.0{mV})/RTONF))*dL*fL*fCa;
    i_siCa = 2.0{dimensionless}*P_CaL*(V-0.0{mV})/(RTONF*(1.0{dimensionless}-exp(-1.0{dimensionless}*(V-0.0{mV})*2.0{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2.0{dimensionless}*(V-0.0{mV})/RTONF))*dL*fL*fCa;
    i_CaL_Iso_increase = sel
      case Iso_1_uM > 0.0{dimensionless}:
        1.23{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    ACh_block = 0.31{dimensionless}*ACh/(ACh+9e-05{mM});
  enddef;

  def comp i_CaT_fT_gate as
    var offset_fT: second {init: 0.0};
    var fT: dimensionless {init: 3.74674099999999996e-02, pub: out};
    var tau_fT: second;
    var fT_infinity: dimensionless;
    var V: mV {pub: in};
    var time: second {pub: in};
    ode(fT, time) = (fT_infinity-fT)/tau_fT;
    tau_fT = 1.0{second}/(16.67{dimensionless}*exp(-(V+75.0{mV})/83.3{mV})+16.67{dimensionless}*exp((V+75.0{mV})/15.38{mV}))+offset_fT;
    fT_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+58.7{mV})/3.8{mV}));
  enddef;

  def comp i_Kr_pi_gate as
    var piy: dimensionless {init: 0.7369347, pub: out};
    var pi_infinity: dimensionless;
    var tau_pi: second;
    var V: mV {pub: in};
    var time: second {pub: in};
    ode(piy, time) = (pi_infinity-piy)/tau_pi;
    pi_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+28.6{mV})/17.1{mV}));
    tau_pi = 1.0{second}/(100.0{dimensionless}*exp(-V/54.645{mV})+656.0{dimensionless}*exp(V/106.157{mV}));
  enddef;

  def comp i_CaT as
    var P_CaT: m3_A_per_mol_times_1e_minus_09 {init: 0.04132};
    var i_CaT_i_CaT: nA {pub: out};
    var Cao: mM {pub: in};
    var dT: dimensionless {pub: in};
    var V: mV {pub: in};
    var RTONF: mV {pub: in};
    var Ca_sub: mM {pub: in};
    var fT: dimensionless {pub: in};
    i_CaT_i_CaT = 2.0{dimensionless}*P_CaT*V/(RTONF*(1.0{dimensionless}-exp(-1.0{dimensionless}*V*2.0{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2.0{dimensionless}*V/RTONF))*dT*fT;
  enddef;

  def comp Ionic_values as
    var E_K: mV {pub: out};
    var Ko: mM {init: 5.4, pub: out};
    var Cao: mM {init: 1.8, pub: out};
    var Nao: mM {init: 140.0, pub: out};
    var E_Na: mV {pub: out};
    var RTONF: mV {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    E_K = RTONF*ln(Ko/Ki);
    E_Na = RTONF*ln(Nao/Nai);
  enddef;

  def comp i_KACh_a_gate as
    var a: dimensionless {init: 2.81845900000000016e-03, pub: out};
    var beta_a: becquerel;
    var a_infinity: dimensionless;
    var tau_a: second;
    var alpha_a: becquerel;
    var time: second {pub: in};
    var V: mV {pub: in};
    var ACh: mM {pub: in};
    ode(a, time) = (a_infinity-a)/tau_a;
    beta_a = 10.0{becquerel}*exp(0.0133{per_mV}*(V+40.0{mV}));
    a_infinity = alpha_a/(alpha_a+beta_a);
    tau_a = 1.0{dimensionless}/(alpha_a+beta_a);
    alpha_a = (3.5988{becquerel}-0.025641{becquerel})/(1.0{dimensionless}+1.2155e-06{dimensionless}/pow(1.0{m3_per_mol}*ACh, 1.6951{dimensionless}))+0.025641{becquerel};
  enddef;

  def comp i_CaL_fL_gate as
    var shift_fL: mV {init: 0.0};
    var fL: dimensionless {init: 0.9951828, pub: out};
    var tau_fL: second;
    var V_fL: mV {init: -12.1847};
    var k_fL: mV {init: 5.1737};
    var fL_infinity: dimensionless;
    var time: second {pub: in};
    var V: mV {pub: in};
    ode(fL, time) = (fL_infinity-fL)/tau_fL;
    tau_fL = 0.001{dimensionless}*(44.3{second}+230.0{second}*exp(-sqr((V+36.0{mV})/10.0{mV})));
    fL_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-V_fL+shift_fL)/k_fL));
  enddef;

  def comp Ki_concentration as
    var Ki: mM {init: 139.1382, pub: out};
    var i_Kur_i_Kur: nA {pub: in};
    var V_i: uL {pub: in};
    var F: C_per_mol {pub: in};
    var i_Kr_i_Kr: nA {pub: in};
    var i_fK: nA {pub: in};
    var i_siK: nA {pub: in};
    var V_sub: uL {pub: in};
    var i_NaK_i_NaK: nA {pub: in};
    var i_Ks_i_Ks: nA {pub: in};
    var time: second {pub: in};
    var i_SK_i_SK: nA {pub: in};
    var i_to_i_to: nA {pub: in};
    ode(Ki, time) = -1.0{1_times_1000000}*(i_Kur_i_Kur+i_to_i_to+i_Kr_i_Kr+i_Ks_i_Ks+i_fK+i_siK+i_SK_i_SK-2.0{dimensionless}*i_NaK_i_NaK)/(1.0{1_times_1000000}*(V_i+V_sub)*F);
  enddef;

  def comp i_f_y_gate as
    var ACh_shift: mV;
    var y_infinity: dimensionless;
    var y_shift: mV {init: 0.0};
    var i_f_y_gate_Iso_shift: mV;
    var tau_y: second;
    var y: dimensionless {init: 0.0103301, pub: out};
    var V: mV {pub: in};
    var ACh: mM {pub: in};
    var time: second {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    ACh_shift = sel
      case ACh > 0.0{mM}:
        -1.0{mV}-9.898{mV}*pow(1.0{m3_per_mol}*ACh, 0.618{dimensionless})/(pow(1.0{m3_per_mol}*ACh, 0.618{dimensionless})+0.00122423{dimensionless});
      otherwise:
        0.0{mV};
    endsel;
    y_infinity = sel
      case V < -(80.0{mV}-ACh_shift-i_f_y_gate_Iso_shift-y_shift):
        0.01329{dimensionless}+0.99921{dimensionless}/(1.0{dimensionless}+exp((V+97.134{mV}-ACh_shift-i_f_y_gate_Iso_shift-y_shift)/8.1752{mV}));
      otherwise:
        0.0002501{dimensionless}*exp(-(V-ACh_shift-i_f_y_gate_Iso_shift-y_shift)/12.861{mV});
    endsel;
    i_f_y_gate_Iso_shift = sel
      case Iso_1_uM > 0.0{dimensionless}:
        7.5{mV};
      otherwise:
        0.0{mV};
    endsel;
    tau_y = 1.0{dimensionless}/(0.36{s2_A_per_g_per_m2}*(V+148.8{mV}-ACh_shift-i_f_y_gate_Iso_shift)/(exp(0.066{per_mV}*(V+148.8{mV}-ACh_shift-i_f_y_gate_Iso_shift))-1.0{dimensionless})+0.1{s2_A_per_g_per_m2}*(V+87.3{mV}-ACh_shift-i_f_y_gate_Iso_shift)/(1.0{dimensionless}-exp(-0.2{per_mV}*(V+87.3{mV}-ACh_shift-i_f_y_gate_Iso_shift))))-0.054{second};
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp i_Na as
    var i_Na_i_Na: nA {pub: out};
    var g_Na_L: uS {init: 0.0};
    var i_Na_: nA;
    var i_Na_L: nA;
    var g_Na: uS {init: 0.0223};
    var E_mh: mV;
    var Ki: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var RTONF: mV {pub: in};
    var Nai: mM {pub: in};
    var m: dimensionless {pub: in};
    var V: mV {pub: in};
    var h: dimensionless {pub: in};
    i_Na_i_Na = i_Na_+i_Na_L;
    i_Na_ = g_Na*pow(m, 3.0{dimensionless})*h*(V-E_mh);
    i_Na_L = g_Na_L*pow(m, 3.0{dimensionless})*(V-E_mh);
    E_mh = RTONF*ln((Nao+0.12{dimensionless}*Ko)/(Nai+0.12{dimensionless}*Ki));
  enddef;

  def comp i_CaL_fCa_gate as
    var fCa: dimensionless {init: 0.7820265, pub: out};
    var alpha_fCa: becquerel {init: 0.0075};
    var tau_fCa: second;
    var Km_fCa: mM {init: 0.000338};
    var fCa_infinity: dimensionless;
    var time: second {pub: in};
    var Ca_sub: mM {pub: in};
    ode(fCa, time) = (fCa_infinity-fCa)/tau_fCa;
    tau_fCa = 0.001{dimensionless}*fCa_infinity/alpha_fCa;
    fCa_infinity = Km_fCa/(Km_fCa+Ca_sub);
  enddef;

  def comp Ca_SR_release as
    var ks: becquerel {init: 1.48041085000000000e+08};
    var MaxSR: dimensionless {init: 15.0};
    var j_SRCarel: mol_per_m3_per_s {pub: out};
    var kom: becquerel {init: 660.0};
    var kCaSR: dimensionless;
    var EC50_SR: mM {init: 0.45};
    var I: dimensionless {init: 1.88065699999999987e-09};
    var kiSRCa: m3_per_s_per_mol;
    var MinSR: dimensionless {init: 1.0};
    var O: dimensionless {init: 1.75000900000000001e-08};
    var HSR: dimensionless {init: 2.5};
    var Ca_SR_release_R: dimensionless {init: 0.9004965};
    var kiCa: m3_per_s_per_mol {init: 500.0};
    var kim: becquerel {init: 5.0};
    var RI: dimensionless {init: 9.67726599999999965e-02};
    var koCa: m6_per_s_per_mol2 {init: 10000.0};
    var koSRCa: m6_per_s_per_mol2;
    var time: second {pub: in};
    var Ca_sub: mM {pub: in};
    var Ca_jsr: mM {pub: in};
    j_SRCarel = ks*O*(Ca_jsr-Ca_sub);
    kCaSR = MaxSR-(MaxSR-MinSR)/(1.0{dimensionless}+pow(EC50_SR/Ca_jsr, HSR));
    ode(I, time) = kiSRCa*Ca_sub*O-kim*I-(kom*I-koSRCa*sqr(Ca_sub)*RI);
    kiSRCa = kiCa*kCaSR;
    ode(O, time) = koSRCa*sqr(Ca_sub)*Ca_SR_release_R-kom*O-(kiSRCa*Ca_sub*O-kim*I);
    ode(Ca_SR_release_R, time) = kim*RI-kiSRCa*Ca_sub*Ca_SR_release_R-(koSRCa*sqr(Ca_sub)*Ca_SR_release_R-kom*O);
    ode(RI, time) = kom*I-koSRCa*sqr(Ca_sub)*RI-(kim*RI-kiSRCa*Ca_sub*Ca_SR_release_R);
    koSRCa = koCa/kCaSR;
  enddef;

  def comp i_KACh as
    var i_KACh_i_KACh: nA {pub: out};
    var g_KACh: uS {init: 0.00345};
    var ACh_on: dimensionless {init: 0.0};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var a: dimensionless {pub: in};
    var ACh: mM {pub: in};
    i_KACh_i_KACh = sel
      case ACh > 0.0{mM}:
        ACh_on*g_KACh*(V-E_K)*(1.0{dimensionless}+exp((V+20.0{mV})/20.0{mV}))*a;
      otherwise:
        0.0{nA};
    endsel;
  enddef;

  def comp Ca_intracellular_fluxes as
    var P_up_basal: mol_per_m3_per_s {init: 5.0};
    var j_Ca_dif: mol_per_m3_per_s {pub: out};
    var tau_tr: second {init: 0.04};
    var tau_dif_Ca: second {init: 5.46866999999999994e-05};
    var b_up: dimensionless;
    var j_tr: mol_per_m3_per_s {pub: out};
    var j_up: mol_per_m3_per_s {pub: out};
    var slope_up: mM {init: 5e-05};
    var K_up: mM {init: 2.86113000000000003e-04};
    var P_up: mol_per_m3_per_s;
    var Iso_1_uM: dimensionless {pub: in};
    var ACh: mM {pub: in};
    var Ca_jsr: mM {pub: in};
    var Ca_nsr: mM {pub: in};
    var Cai: mM {pub: in};
    var Ca_sub: mM {pub: in};
    j_Ca_dif = (Ca_sub-Cai)/tau_dif_Ca;
    b_up = sel
      case Iso_1_uM > 0.0{dimensionless}:
        -0.25{dimensionless};
      case ACh > 0.0{mM}:
        0.7{dimensionless}*ACh/(9e-05{mM}+ACh);
      otherwise:
        0.0{dimensionless};
    endsel;
    j_tr = (Ca_nsr-Ca_jsr)/tau_tr;
    j_up = P_up/(1.0{dimensionless}+exp((-Cai+K_up)/slope_up));
    P_up = P_up_basal*(1.0{dimensionless}-b_up);
  enddef;

  def comp Rate_modulation_experiments as
    var ACh: mM {init: 0.0, pub: out};
    var Iso_1_uM: dimensionless {init: 0.0, pub: out};
  enddef;

  def comp Ca_dynamics as
    var Ca_sub: mM {init: 8.59587700000000057e-05, pub: out};
    var Ca_nsr: mM {init: 0.669119, pub: out};
    var Cai: mM {init: 1.26704600000000013e-04, pub: out};
    var Ca_jsr: mM {init: 0.5869378, pub: out};
    var j_tr: mol_per_m3_per_s {pub: in};
    var j_SRCarel: mol_per_m3_per_s {pub: in};
    var delta_fCQ: becquerel {pub: in};
    var time: second {pub: in};
    var CQ_tot: mM {pub: in};
    var j_up: mol_per_m3_per_s {pub: in};
    var V_jsr: uL {pub: in};
    var V_nsr: uL {pub: in};
    var j_Ca_dif: mol_per_m3_per_s {pub: in};
    var i_CaT_i_CaT: nA {pub: in};
    var CM_tot: mM {pub: in};
    var i_siCa: nA {pub: in};
    var V_sub: uL {pub: in};
    var i_NaCa_i_NaCa: nA {pub: in};
    var F: C_per_mol {pub: in};
    var delta_fCMs: becquerel {pub: in};
    var V_i: uL {pub: in};
    var delta_fTC: becquerel {pub: in};
    var delta_fTMC: becquerel {pub: in};
    var TC_tot: mM {pub: in};
    var TMC_tot: mM {pub: in};
    var delta_fCMi: becquerel {pub: in};
    ode(Ca_sub, time) = j_SRCarel*V_jsr/V_sub-((i_siCa+i_CaT_i_CaT-2.0{dimensionless}*i_NaCa_i_NaCa)/(2.0{dimensionless}*F*V_sub)+j_Ca_dif+CM_tot*delta_fCMs);
    ode(Ca_nsr, time) = j_up-j_tr*V_jsr/V_nsr;
    ode(Cai, time) = 1.0{dimensionless}*(j_Ca_dif*V_sub-j_up*V_nsr)/V_i-(CM_tot*delta_fCMi+TC_tot*delta_fTC+TMC_tot*delta_fTMC);
    ode(Ca_jsr, time) = j_tr-(j_SRCarel+CQ_tot*delta_fCQ);
  enddef;

  def comp i_Na_h_gate as
    var beta_h: becquerel;
    var h_infinity: dimensionless;
    var tau_h: second;
    var alpha_h: becquerel;
    var h: dimensionless {init: 5.20200199999999984e-03, pub: out};
    var V: mV {pub: in};
    var time: second {pub: in};
    beta_h = 2000.0{becquerel}/(320.0{dimensionless}*exp(-0.1{per_mV}*(V+75.0{mV}))+1.0{dimensionless});
    h_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+69.804{mV})/4.4565{mV}));
    tau_h = 1.0{dimensionless}/(alpha_h+beta_h);
    alpha_h = 20.0{becquerel}*exp(-0.125{per_mV}*(V+75.0{mV}));
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp i_CaL_dL_gate as
    var adVm: mV;
    var dL_infinity: dimensionless;
    var dL: dimensionless {init: 1.40229900000000008e-03, pub: out};
    var Iso_shift_dL: mV;
    var tau_dL: second;
    var Iso_slope_dL: dimensionless;
    var alpha_dL: becquerel;
    var k_dL: mV {init: 5.854};
    var V_dL: mV {init: -7.7713};
    var beta_dL: becquerel;
    var bdVm: mV;
    var time: second {pub: in};
    var V: mV {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    adVm = sel
      case V == -41.8{mV}:
        -41.80001{mV};
      case V == 0.0{mV}:
        0.0{mV};
      case V == -6.8{mV}:
        -6.80001{mV};
      otherwise:
        V;
    endsel;
    dL_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-V_dL-Iso_shift_dL)/(k_dL*(1.0{dimensionless}+Iso_slope_dL/100.0{dimensionless}))));
    ode(dL, time) = (dL_infinity-dL)/tau_dL;
    Iso_shift_dL = sel
      case Iso_1_uM > 0.0{dimensionless}:
        -8.0{mV};
      otherwise:
        0.0{mV};
    endsel;
    tau_dL = 0.001{dimensionless}/(alpha_dL+beta_dL);
    Iso_slope_dL = sel
      case Iso_1_uM > 0.0{dimensionless}:
        -27.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    alpha_dL = -0.02839{s2_A_per_g_per_m2}*(adVm+41.8{mV})/(exp(-(adVm+41.8{mV})/2.5{mV})-1.0{dimensionless})-0.0849{s2_A_per_g_per_m2}*(adVm+6.8{mV})/(exp(-(adVm+6.8{mV})/4.8{mV})-1.0{dimensionless});
    beta_dL = 0.01143{s2_A_per_g_per_m2}*(bdVm+1.8{mV})/(exp((bdVm+1.8{mV})/2.5{mV})-1.0{dimensionless});
    bdVm = sel
      case V == -1.8{mV}:
        -1.80001{mV};
      otherwise:
        V;
    endsel;
  enddef;
  def map between i_Kur and i_Kur_sKur_gate for
    vars s_Kur and s_Kur;
  enddef;
  def map between Ionic_values and i_Kur for
    vars E_K and E_K;
  enddef;
  def map between i_Kur and i_Kur_rKur_gate for
    vars r_Kur and r_Kur;
  enddef;
  def map between Membrane and i_Kur for
    vars V and V;
    vars i_Kur_i_Kur and i_Kur_i_Kur;
  enddef;
  def map between Ca_buffering and environment for
    vars time and time;
  enddef;
  def map between Ki_concentration and i_Na for
    vars Ki and Ki;
  enddef;
  def map between Ionic_values and i_Na for
    vars Nao and Nao;
    vars Ko and Ko;
  enddef;
  def map between Membrane and i_Na for
    vars RTONF and RTONF;
    vars V and V;
    vars i_Na_i_Na and i_Na_i_Na;
  enddef;
  def map between Nai_concentration and i_Na for
    vars Nai and Nai;
    vars i_Na_i_Na and i_Na_i_Na;
  enddef;
  def map between environment and i_CaL_dL_gate for
    vars time and time;
  enddef;
  def map between Ca_dynamics and Ca_intracellular_fluxes for
    vars j_tr and j_tr;
    vars Ca_jsr and Ca_jsr;
    vars Ca_nsr and Ca_nsr;
    vars j_up and j_up;
    vars j_Ca_dif and j_Ca_dif;
    vars Cai and Cai;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Ca_SR_release and Ca_dynamics for
    vars j_SRCarel and j_SRCarel;
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
  enddef;
  def map between Ca_buffering and Ca_dynamics for
    vars delta_fCQ and delta_fCQ;
    vars CQ_tot and CQ_tot;
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
    vars Cai and Cai;
    vars CM_tot and CM_tot;
    vars delta_fCMs and delta_fCMs;
    vars delta_fTC and delta_fTC;
    vars delta_fTMC and delta_fTMC;
    vars TC_tot and TC_tot;
    vars TMC_tot and TMC_tot;
    vars delta_fCMi and delta_fCMi;
  enddef;
  def map between Ca_dynamics and environment for
    vars time and time;
  enddef;
  def map between Membrane and i_Kr_pi_gate for
    vars V and V;
  enddef;
  def map between Membrane and i_to_q_gate for
    vars V and V;
  enddef;
  def map between Rate_modulation_experiments and i_Ks for
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between Membrane and i_Kr_pa_gate for
    vars V and V;
  enddef;
  def map between Membrane and i_Ks_n_gate for
    vars V and V;
  enddef;
  def map between Membrane and i_CaL_dL_gate for
    vars V and V;
  enddef;
  def map between Membrane and i_Na_m_gate for
    vars V and V;
  enddef;
  def map between Ca_SR_release and environment for
    vars time and time;
  enddef;
  def map between Ionic_values and Membrane for
    vars RTONF and RTONF;
  enddef;
  def map between Ionic_values and Nai_concentration for
    vars Nai and Nai;
  enddef;
  def map between i_Ks and i_Ks_n_gate for
    vars n and n;
  enddef;
  def map between Membrane and i_Ks for
    vars V and V;
    vars i_Ks_i_Ks and i_Ks_i_Ks;
    vars RTONF and RTONF;
  enddef;
  def map between Rate_modulation_experiments and i_CaL_dL_gate for
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between environment and i_Na_m_gate for
    vars time and time;
  enddef;
  def map between environment and i_CaL_fCa_gate for
    vars time and time;
  enddef;
  def map between Rate_modulation_experiments and i_CaL for
    vars Iso_1_uM and Iso_1_uM;
    vars ACh and ACh;
  enddef;
  def map between Rate_modulation_experiments and i_Ks_n_gate for
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between Nai_concentration and i_NaCa for
    vars Nai and Nai;
    vars i_NaCa_i_NaCa and i_NaCa_i_NaCa;
  enddef;
  def map between Membrane and i_NaCa for
    vars V and V;
    vars RTONF and RTONF;
    vars i_NaCa_i_NaCa and i_NaCa_i_NaCa;
  enddef;
  def map between Ca_dynamics and i_NaCa for
    vars Ca_sub and Ca_sub;
    vars i_NaCa_i_NaCa and i_NaCa_i_NaCa;
  enddef;
  def map between environment and i_KACh_a_gate for
    vars time and time;
  enddef;
  def map between i_Na and i_Na_m_gate for
    vars m and m;
  enddef;
  def map between i_Na and i_Na_h_gate for
    vars h and h;
  enddef;
  def map between Membrane and i_CaT_fT_gate for
    vars V and V;
  enddef;
  def map between Membrane and i_Na_h_gate for
    vars V and V;
  enddef;
  def map between Nai_concentration and i_f for
    vars i_fNa and i_fNa;
  enddef;
  def map between Nai_concentration and i_CaL for
    vars i_siNa and i_siNa;
    vars Nai and Nai;
  enddef;
  def map between Cell_parameters and Nai_concentration for
    vars V_i and V_i;
    vars V_sub and V_sub;
  enddef;
  def map between Membrane and Nai_concentration for
    vars F and F;
  enddef;
  def map between Nai_concentration and i_NaK for
    vars i_NaK_i_NaK and i_NaK_i_NaK;
    vars Nai and Nai;
  enddef;
  def map between Nai_concentration and environment for
    vars time and time;
  enddef;
  def map between Ionic_values and i_NaCa for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between Rate_modulation_experiments and i_NaK for
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between Ca_intracellular_fluxes and Rate_modulation_experiments for
    vars Iso_1_uM and Iso_1_uM;
    vars ACh and ACh;
  enddef;
  def map between Membrane and i_to_r_gate for
    vars V and V;
  enddef;
  def map between Membrane and i_CaT_dT_gate for
    vars V and V;
  enddef;
  def map between Ionic_values and Ki_concentration for
    vars Ki and Ki;
  enddef;
  def map between Ionic_values and i_CaL for
    vars Ko and Ko;
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between i_CaL and i_CaL_fCa_gate for
    vars fCa and fCa;
  enddef;
  def map between Membrane and i_CaL for
    vars V and V;
    vars RTONF and RTONF;
    vars i_CaL_i_CaL and i_CaL_i_CaL;
  enddef;
  def map between Ki_concentration and i_CaL for
    vars Ki and Ki;
    vars i_siK and i_siK;
  enddef;
  def map between i_CaL and i_CaL_dL_gate for
    vars dL and dL;
  enddef;
  def map between i_CaL and i_CaL_fL_gate for
    vars fL and fL;
  enddef;
  def map between Membrane and i_Kr for
    vars i_Kr_i_Kr and i_Kr_i_Kr;
    vars V and V;
  enddef;
  def map between Membrane and i_f for
    vars i_f_i_f and i_f_i_f;
    vars V and V;
  enddef;
  def map between Membrane and i_CaT for
    vars i_CaT_i_CaT and i_CaT_i_CaT;
    vars V and V;
    vars RTONF and RTONF;
  enddef;
  def map between Membrane and i_NaK for
    vars i_NaK_i_NaK and i_NaK_i_NaK;
    vars V and V;
  enddef;
  def map between Membrane and i_KACh for
    vars i_KACh_i_KACh and i_KACh_i_KACh;
    vars V and V;
  enddef;
  def map between Membrane and i_SK for
    vars i_SK_i_SK and i_SK_i_SK;
    vars V and V;
  enddef;
  def map between Membrane and i_to for
    vars i_to_i_to and i_to_i_to;
    vars V and V;
  enddef;
  def map between i_to and i_to_q_gate for
    vars q and q;
  enddef;
  def map between Ionic_values and i_to for
    vars E_K and E_K;
  enddef;
  def map between i_to and i_to_r_gate for
    vars r and r;
  enddef;
  def map between Membrane and i_f_y_gate for
    vars V and V;
  enddef;
  def map between Voltage_clamp and environment for
    vars time and time;
  enddef;
  def map between Ionic_values and i_Ks for
    vars Nao and Nao;
    vars Ko and Ko;
  enddef;
  def map between Nai_concentration and i_Ks for
    vars Nai and Nai;
  enddef;
  def map between Ki_concentration and i_Ks for
    vars Ki and Ki;
    vars i_Ks_i_Ks and i_Ks_i_Ks;
  enddef;
  def map between Membrane and i_Kur_sKur_gate for
    vars V and V;
  enddef;
  def map between environment and i_Ks_n_gate for
    vars time and time;
  enddef;
  def map between Rate_modulation_experiments and i_f_y_gate for
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between Membrane and i_Kur_rKur_gate for
    vars V and V;
  enddef;
  def map between Ki_concentration and i_Kur for
    vars i_Kur_i_Kur and i_Kur_i_Kur;
  enddef;
  def map between Cell_parameters and Ki_concentration for
    vars V_i and V_i;
    vars V_sub and V_sub;
  enddef;
  def map between Ki_concentration and Membrane for
    vars F and F;
  enddef;
  def map between Ki_concentration and i_Kr for
    vars i_Kr_i_Kr and i_Kr_i_Kr;
  enddef;
  def map between Ki_concentration and i_f for
    vars i_fK and i_fK;
  enddef;
  def map between Ki_concentration and i_NaK for
    vars i_NaK_i_NaK and i_NaK_i_NaK;
  enddef;
  def map between Ki_concentration and environment for
    vars time and time;
  enddef;
  def map between Ki_concentration and i_SK for
    vars i_SK_i_SK and i_SK_i_SK;
  enddef;
  def map between Ki_concentration and i_to for
    vars i_to_i_to and i_to_i_to;
  enddef;
  def map between Ca_dynamics and Cell_parameters for
    vars V_jsr and V_jsr;
    vars V_nsr and V_nsr;
    vars V_sub and V_sub;
    vars V_i and V_i;
  enddef;
  def map between environment and i_Kr_pi_gate for
    vars time and time;
  enddef;
  def map between Ca_dynamics and i_SK_x_gate for
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Membrane and environment for
    vars time and time;
  enddef;
  def map between Ca_dynamics and i_CaL for
    vars Ca_sub and Ca_sub;
    vars i_siCa and i_siCa;
  enddef;
  def map between environment and i_Kur_rKur_gate for
    vars time and time;
  enddef;
  def map between Ionic_values and i_NaK for
    vars E_Na and E_Na;
    vars Ko and Ko;
  enddef;
  def map between Ionic_values and i_Kr for
    vars Ko and Ko;
    vars E_K and E_K;
  enddef;
  def map between environment and i_f_y_gate for
    vars time and time;
  enddef;
  def map between environment and i_CaL_fL_gate for
    vars time and time;
  enddef;
  def map between environment and i_to_q_gate for
    vars time and time;
  enddef;
  def map between i_f and i_f_y_gate for
    vars y and y;
  enddef;
  def map between Ionic_values and i_f for
    vars E_K and E_K;
    vars E_Na and E_Na;
  enddef;
  def map between environment and i_CaT_dT_gate for
    vars time and time;
  enddef;
  def map between Ca_dynamics and i_CaT for
    vars i_CaT_i_CaT and i_CaT_i_CaT;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Ca_dynamics and Membrane for
    vars F and F;
  enddef;
  def map between environment and i_Kr_pa_gate for
    vars time and time;
  enddef;
  def map between Membrane and i_CaL_fL_gate for
    vars V and V;
  enddef;
  def map between Ionic_values and i_KACh for
    vars E_K and E_K;
  enddef;
  def map between i_KACh and i_KACh_a_gate for
    vars a and a;
  enddef;
  def map between Rate_modulation_experiments and i_KACh for
    vars ACh and ACh;
  enddef;
  def map between Membrane and i_KACh_a_gate for
    vars V and V;
  enddef;
  def map between environment and i_Na_h_gate for
    vars time and time;
  enddef;
  def map between i_Kr and i_Kr_pa_gate for
    vars paS and paS;
    vars paF and paF;
  enddef;
  def map between i_Kr and i_Kr_pi_gate for
    vars piy and piy;
  enddef;
  def map between Rate_modulation_experiments and i_KACh_a_gate for
    vars ACh and ACh;
  enddef;
  def map between environment and i_CaT_fT_gate for
    vars time and time;
  enddef;
  def map between environment and i_SK_x_gate for
    vars time and time;
  enddef;
  def map between environment and i_to_r_gate for
    vars time and time;
  enddef;
  def map between Ca_dynamics and i_CaL_fCa_gate for
    vars Ca_sub and Ca_sub;
  enddef;
  def map between environment and i_Kur_sKur_gate for
    vars time and time;
  enddef;
  def map between Membrane and Voltage_clamp for
    vars V_clamp and V_clamp;
  enddef;
  def map between Ionic_values and i_CaT for
    vars Cao and Cao;
  enddef;
  def map between i_CaT and i_CaT_dT_gate for
    vars dT and dT;
  enddef;
  def map between i_CaT and i_CaT_fT_gate for
    vars fT and fT;
  enddef;
  def map between Ionic_values and i_SK for
    vars E_K and E_K;
  enddef;
  def map between i_SK and i_SK_x_gate for
    vars x and x;
  enddef;
enddef;
