// This CellML file was generated on 08/11/2006 at 11:26:24 using:
//
// COR (0.9.31.389)
// Copyright 2002-2006 Oxford Cardiac Electrophysiology Group
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// created: W3CDTF 2006-01-01
// creator: Orgname unknown; Orgunit unknown; unknown; Given unknown; Family unknown; Other unknown
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; This variant of the model was created by Penny Noble of Oxford University, and represents the parameters given for the endocardial cell variant in Ten Tusscher et al. 2004. A stimulus protocol component has been added to the model to allow simulation of trains of action potentials (JL, 18/06/07). This file is known to run in PCEnv and COR.
// created: W3CDTF 2006-11-08T00:00:00+13:00
// creator: Orgname Oxford University; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// simulation: endingValue 10000; nonstandard-pointDensity 10000; maximumStepSize 0.01
// title: unknown
// comment: FN unknown; This variant represents the human endocardial cell, as defined by ten Tusscher et al. in their 2004 paper.
// reference: Pubmed_id 14656705; Given K; Family ten Tusscher; Other H; Given D; Family Noble; Given P; Family Noble; Other J; Given A; Family Panfilov; Other V; title A model for human ventricular tissue; volume 286 4; first_page 1573; title American Journal of Physiology Heart and Circulatory Physiology; W3CDTF 2006-01-01; last_page 1589
def model tentusscher_noble_noble_panfilov_2004_version02_variant03 as
  // A Model For Human Ventricular Tissue
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This variant of the model was created by Penny Noble of Oxford University, and represents the parameters given for the endocardial cell variant in Ten Tusscher et al. 2004. This file is known to run in PCEnv and COR.
  //
  // Model Structure
  //
  // Cardiac arrhythmias and sudden cardiac death are amongst the most common causes of premature death in the devloped world. However despite their prevalance, they remain relatively poorly understood. Mathematical models, which capture the function of the beating human heart, play an important role in cardiac research. In part this is because practical experiments on human hearts are limited, and animal hearts may differ significantly in their anatomy and physiology relative to the human heart. In addition, cardiac arrhythmias are three dimensional phenomena, while experimental observations are mainly limited to surface recordings.
  //
  // Existing mathematical models of human ventricular cells include:
  //
  // Priebe and Beuckelmann, Electrophysiological Model of the Human Ventricular Myocyte, 1998 (${HTML_EXMPL_PRIEBE_MODEL}); and
  //
  // Bernus et al. A Computationally Efficient Electrophysiological Model of Human Ventricular Cells, 2002 (${HTML_EXMPL_BERNUS_MODEL}).
  //
  // However, these models have their limitations, such as the fact that several of the equations are based on animal data. The aim of the 2004 study by ten Tusscher et al., is to develop a new model for human ventricular cells that is based on recent experimetnal data and that is computationally efficient for large-scale spatial simulations. A schematic diagrma of the modl can be seen in below.
  //
  // The model has been described here in CellML (the raw CellML description of the ten Tusscher et al. 2004 model can be downloaded in various formats as described in ).
  //
  // The complete original paper reference is cited below:
  //
  // A model for human ventricular tissue (http://ajpheart.physiology.org/cgi/content/abstract/286/4/H1573), K.H.W.J. ten Tusscher, D. Noble, P.J. Noble, and A.V. Panfilov, 2004, American Journal of Physiology (http://ajpheart.physiology.org/), 286, H1573-H1589. (Full text (HTML) (http://ajpheart.physiology.org/cgi/content/full/286/4/H1573) and PDF (http://ajpheart.physiology.org/cgi/reprint/286/4/H1573.pdf) versions of the article are available to subscribers on the American Journal of Physiology website.) PubMed ID: 14656705 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=14656705&dopt=Abstract)
  //
  // cell diagram
  //
  // A schematic diagram describing the ion movement across the cell surface membrane and the sarcoplasmic reticulum, which are described by the Ten Tusscher et al. 2004 mathematical model of the human ventricular myocyte.
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre3 as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: nano};
    unit farad {pref: pico};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {pref: pico};
  enddef;
  def unit nanoA_per_millimolar as
    unit ampere {pref: nano};
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit second {pref: milli, expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit millimolar {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit microF_per_cm2 as
    unit microF;
    unit cm2 {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {pub: out, init: -86.2};
    var R: joule_per_mole_kelvin {pub: out, init: 8314.472};
    var T: kelvin {pub: out, init: 310};
    var F: coulomb_per_millimole {pub: out, init: 96485.3415};
    var Cm: microF_per_cm2 {pub: out, init: 0.185};
    var V_c: micrometre3 {pub: out, init: 0.016404};
    var time: millisecond {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_to: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_b_Na: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_b_Ca: picoA_per_picoF {pub: in};
    var i_p_K: picoA_per_picoF {pub: in};
    var i_p_Ca: picoA_per_picoF {pub: in};
    var i_Stim: picoA_per_picoF {pub: out};
    ode(V, time) = -1{dimensionless}/1{dimensionless}*(i_K1+i_to+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_b_Na+i_NaCa+i_b_Ca+i_p_K+i_p_Ca+i_Stim);
    i_Stim = Istim;
    var Istim: picoA_per_picoF {pub: in};
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var P_kna: nanoA_per_millimolar {init: 0.03};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
  enddef;

  def comp inward_rectifier_potassium_current as
    var i_K1: picoA_per_picoF {pub: out};
    var g_K1: nanoS_per_picoF {init: 5.405};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xK1_inf: dimensionless;
    var alpha_K1: dimensionless;
    var beta_K1: dimensionless;
    alpha_K1 = 0.1{dimensionless}/(1{dimensionless}+exp(0.06{dimensionless}*(V-E_K-200{millivolt})));
    beta_K1 = (3{dimensionless}*exp(0.0002{dimensionless}*(V-E_K+100{millivolt}))+exp(0.1{dimensionless}*(V-E_K-10{millivolt})))/(1{dimensionless}+exp(-0.5{dimensionless}*(V-E_K)));
    xK1_inf = alpha_K1/(alpha_K1+beta_K1);
    i_K1 = g_K1*xK1_inf*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current as
    var i_Kr: picoA_per_picoF {pub: out};
    var g_Kr: nanoS_per_picoF {init: 0.096};
    var E_K: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Xr1: dimensionless {priv: in};
    var Xr2: dimensionless {priv: in};
    i_Kr = g_Kr*sqrt(K_o/5.4{dimensionless})*Xr1*Xr2*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr1_gate as
    var Xr1: dimensionless {pub: out, init: 0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xr1_inf: dimensionless;
    var alpha_xr1: per_millisecond;
    var beta_xr1: per_millisecond;
    var tau_xr1: millisecond;
    xr1_inf = 1{dimensionless}/(1{dimensionless}+exp((-26{millivolt}-V)/7{millivolt}));
    alpha_xr1 = 450{per_millisecond}/(1{dimensionless}+exp((-45{millivolt}-V)/10{millivolt}));
    beta_xr1 = 6{per_millisecond}/(1{dimensionless}+exp((V+30{millivolt})/11.5{millivolt}));
    tau_xr1 = alpha_xr1*beta_xr1;
    ode(Xr1, time) = (xr1_inf-Xr1)/tau_xr1;
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr2_gate as
    var Xr2: dimensionless {pub: out, init: 1};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xr2_inf: dimensionless;
    var alpha_xr2: per_millisecond;
    var beta_xr2: per_millisecond;
    var tau_xr2: millisecond;
    xr2_inf = 1{dimensionless}/(1{dimensionless}+exp((V+88{millivolt})/24{millivolt}));
    alpha_xr2 = 3{per_millisecond}/(1{dimensionless}+exp((-60{millivolt}-V)/20{millivolt}));
    beta_xr2 = 1.12{per_millisecond}/(1{dimensionless}+exp((V-60{millivolt})/20{millivolt}));
    tau_xr2 = alpha_xr2*beta_xr2;
    ode(Xr2, time) = (xr2_inf-Xr2)/tau_xr2;
  enddef;

  def comp slow_time_dependent_potassium_current as
    var i_Ks: picoA_per_picoF {pub: out};
    var g_Ks: nanoS_per_picoF {init: 0.245};
    var E_Ks: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Xs: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp slow_time_dependent_potassium_current_Xs_gate as
    var Xs: dimensionless {pub: out, init: 0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xs_inf: dimensionless;
    var alpha_xs: per_millisecond;
    var beta_xs: per_millisecond;
    var tau_xs: millisecond;
    xs_inf = 1{dimensionless}/(1{dimensionless}+exp((-5{millivolt}-V)/14{millivolt}));
    alpha_xs = 1100{per_millisecond}/sqrt(1{dimensionless}+exp((-10{millivolt}-V)/6{millivolt}));
    beta_xs = 1{per_millisecond}/(1{dimensionless}+exp((V-60{millivolt})/20{millivolt}));
    tau_xs = alpha_xs*beta_xs;
    ode(Xs, time) = (xs_inf-Xs)/tau_xs;
  enddef;

  def comp fast_sodium_current as
    var i_Na: picoA_per_picoF {pub: out};
    var g_Na: nanoS_per_picoF {init: 14.838};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var m_inf: dimensionless;
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var tau_m: millisecond;
    m_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((-56.86{millivolt}-V)/9.03{millivolt}));
    alpha_m = 1{per_millisecond}/(1{dimensionless}+exp((-60{millivolt}-V)/5{millivolt}));
    beta_m = 0.1{per_millisecond}/(1{dimensionless}+exp((V+35{millivolt})/5{millivolt}))+0.1{per_millisecond}/(1{dimensionless}+exp((V-50{millivolt})/200{millivolt}));
    tau_m = alpha_m*beta_m;
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.75};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var h_inf: dimensionless;
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var tau_h: millisecond;
    h_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((V+71.55{millivolt})/7.43{millivolt}));
    alpha_h = sel
      case V < -40{millivolt}:
        0.057{per_millisecond}*exp(-(V+80{millivolt})/6.8{millivolt});
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        2.7{per_millisecond}*exp(0.079{dimensionless}*V)+310000{per_millisecond}*exp(0.3485{dimensionless}*V);
      otherwise:
        0.77{per_millisecond}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {pub: out, init: 0.75};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var j_inf: dimensionless;
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var tau_j: millisecond;
    j_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((V+71.55{millivolt})/7.43{millivolt}));
    alpha_j = sel
      case V < -40{millivolt}:
        (-25428{per_millisecond}*exp(0.2444{dimensionless}*V)-6.948e-6{per_millisecond}*exp(-0.04391{dimensionless}*V))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{dimensionless}*(V+79.23{millivolt})));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.02424{per_millisecond}*exp(-0.01052{dimensionless}*V)/(1{dimensionless}+exp(-0.1378{dimensionless}*(V+40.14{millivolt})));
      otherwise:
        0.6{per_millisecond}*exp(0.057{dimensionless}*V)/(1{dimensionless}+exp(-0.1{dimensionless}*(V+32{millivolt})));
    endsel;
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp sodium_background_current as
    var i_b_Na: picoA_per_picoF {pub: out};
    var g_bna: nanoS_per_picoF {init: 0.00029};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp L_type_Ca_current as
    var i_CaL: picoA_per_picoF {pub: out};
    var g_CaL: nanoS_per_picoF {init: 0.000175};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d: dimensionless {pub: out, priv: in};
    var f: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    i_CaL = g_CaL*d*f*fCa*4{dimensionless}*V*sqr(F)/(R*T)*(Ca_i*exp(2{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Ca_o)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
  enddef;

  def comp L_type_Ca_current_d_gate as
    var d: dimensionless {pub: out, init: 0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var d_inf: dimensionless;
    var alpha_d: per_millisecond;
    var beta_d: per_millisecond;
    var gamma_d: per_millisecond;
    var tau_d: millisecond;
    d_inf = 1{dimensionless}/(1{dimensionless}+exp((-5{millivolt}-V)/7.5{millivolt}));
    alpha_d = 1.4{per_millisecond}/(1{dimensionless}+exp((-35{millivolt}-V)/13{millivolt}))+0.25{per_millisecond};
    beta_d = 1.4{per_millisecond}/(1{dimensionless}+exp((V+5{millivolt})/5{millivolt}));
    gamma_d = 1{per_millisecond}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_d = alpha_d*beta_d+gamma_d;
    ode(d, time) = (d_inf-d)/tau_d;
  enddef;

  def comp L_type_Ca_current_f_gate as
    var f: dimensionless {pub: out, init: 1};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f_inf: dimensionless;
    var tau_f: millisecond;
    f_inf = 1{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/7{millivolt}));
    tau_f = 1125{millisecond}*exp(-sqr(V+27{millivolt})/240{millivolt})+80{millisecond}+165{millisecond}/(1{dimensionless}+exp((25{millivolt}-V)/10{millivolt}));
    ode(f, time) = (f_inf-f)/tau_f;
  enddef;

  def comp L_type_Ca_current_fCa_gate as
    var fCa: dimensionless {pub: out, init: 1};
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var alpha_fCa: dimensionless;
    var beta_fCa: dimensionless;
    var gama_fCa: dimensionless;
    var fCa_inf: dimensionless;
    var tau_fCa: millisecond;
    var d_fCa: dimensionless;
    alpha_fCa = 1{dimensionless}/(1{dimensionless}+pow(Ca_i/0.000325{millimolar}, 8{dimensionless}));
    beta_fCa = 0.1{dimensionless}/(1{dimensionless}+exp((Ca_i-0.0005{millimolar})/0.0001{millimolar}));
    gama_fCa = 0.2{dimensionless}/(1{dimensionless}+exp((Ca_i-0.00075{millimolar})/0.0008{millimolar}));
    fCa_inf = (alpha_fCa+beta_fCa+gama_fCa+0.23{dimensionless})/1.46{dimensionless};
    tau_fCa = 2{millisecond};
    d_fCa = (fCa_inf-fCa)/tau_fCa;
    ode(fCa, time) = sel
      case (0.01{millisecond}*d_fCa > 0{dimensionless}) and (V > -60{millivolt}):
        0{dimensionless};
      otherwise:
        d_fCa;
    endsel;
  enddef;

  def comp calcium_background_current as
    var i_b_Ca: picoA_per_picoF {pub: out};
    var g_bca: nanoS_per_picoF {init: 0.000592};
    var E_Ca: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp transient_outward_current as
    var i_to: picoA_per_picoF {pub: out};
    var g_to: nanoS_per_picoF {init: 0.073};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in, priv: out};
    var time: millisecond {pub: in, priv: out};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*r*s*(V-E_K);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {pub: out, init: 1};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var s_inf: dimensionless;
    var tau_s: dimensionless;
    s_inf = 1{dimensionless}/(1{dimensionless}+exp((V+28{millivolt})/5{millivolt}));
    tau_s = 1000{millisecond}*exp(-sqr(V+67{millivolt})/1000{millivolt})+8{millisecond};
    ode(s, time) = (s_inf-s)/tau_s;
  enddef;

  def comp transient_outward_current_r_gate as
    var r: dimensionless {pub: out, init: 0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var r_inf: dimensionless;
    var tau_r: millisecond;
    r_inf = 1{dimensionless}/(1{dimensionless}+exp((20{millivolt}-V)/6{millivolt}));
    tau_r = 9.5{millisecond}*exp(-sqr(V+40{millivolt})/1800{millivolt})+0.8{millisecond};
    ode(r, time) = (r_inf-r)/tau_r;
  enddef;

  def comp sodium_potassium_pump_current as
    var i_NaK: picoA_per_picoF {pub: out};
    var P_NaK: picoA_per_picoF {init: 1.362};
    var K_mk: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: millisecond {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in, priv: out};
    i_NaK = P_NaK*K_o/(K_o+K_mk)*Na_i/(Na_i+K_mNa)/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T)));
  enddef;

  def comp sodium_calcium_exchanger_current as
    var i_NaCa: picoA_per_picoF {pub: out};
    var K_NaCa: picoA_per_picoF {init: 1000};
    var K_sat: dimensionless {init: 0.1};
    var alpha: dimensionless {init: 2.5};
    var gamma: dimensionless {init: 0.35};
    var Km_Ca: millimolar {init: 1.38};
    var Km_Nai: millimolar {init: 87.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaCa = K_NaCa*(exp(gamma*V*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i*alpha)/((pow(Km_Nai, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(Km_Ca+Ca_o)*(1{dimensionless}+K_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp calcium_pump_current as
    var i_p_Ca: picoA_per_picoF {pub: out};
    var g_pCa: nanoS_per_picoF {init: 0.825};
    var K_pCa: millimolar {init: 0.0005};
    var Ca_i: millimolar {pub: in};
    i_p_Ca = g_pCa*Ca_i/(Ca_i+K_pCa);
  enddef;

  def comp potassium_pump_current as
    var i_p_K: picoA_per_picoF {pub: out};
    var g_pK: nanoS_per_picoF {init: 0.0146};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_p_K = g_pK*(V-E_K)/(1{dimensionless}+exp((25{millivolt}-V)/5.98{millivolt}));
  enddef;

  def comp calcium_dynamics as
    var Ca_i: millimolar {pub: out, init: 0.0002};
    var Ca_o: millimolar {pub: out, init: 2};
    var Ca_SR: millimolar {init: 0.2};
    var i_rel: millimolar_per_millisecond;
    var i_up: millimolar_per_millisecond;
    var i_leak: millimolar_per_millisecond;
    var g: dimensionless {init: 1};
    var tau_g: millisecond {init: 2};
    var g_inf: dimensionless;
    var a_rel: millimolar_per_millisecond {init: 0.016464};
    var b_rel: millimolar {init: 0.25};
    var c_rel: millimolar_per_millisecond {init: 0.008232};
    var K_up: millimolar {init: 0.00025};
    var V_leak: per_millisecond {init: 8e-5};
    var Vmax_up: millimolar_per_millisecond {init: 0.000425};
    var Ca_i_bufc: millimolar;
    var Ca_sr_bufsr: millimolar;
    var Buf_c: millimolar {init: 0.15};
    var K_buf_c: millimolar {init: 0.001};
    var Buf_sr: millimolar {init: 10};
    var K_buf_sr: millimolar {init: 0.3};
    var V_sr: micrometre3 {init: 0.001094};
    var V: millivolt {pub: in};
    var V_c: micrometre3 {pub: in};
    var time: millisecond {pub: in};
    var d: dimensionless {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_p_Ca: picoA_per_picoF {pub: in};
    var i_b_Ca: picoA_per_picoF {pub: in};
    var d_g: dimensionless;
    i_rel = (a_rel*sqr(Ca_SR)/(sqr(b_rel)+sqr(Ca_SR))+c_rel)*d*g;
    i_up = Vmax_up/(1{dimensionless}+sqr(K_up)/sqr(Ca_i));
    i_leak = V_leak*(Ca_SR-Ca_i);
    g_inf = sel
      case Ca_i < 0.00035{millimolar}:
        1{dimensionless}/(1{dimensionless}+pow(Ca_i/0.00035{millimolar}, 6{dimensionless}));
      otherwise:
        1{dimensionless}/(1{dimensionless}+pow(Ca_i/0.00035{millimolar}, 16{dimensionless}));
    endsel;
    d_g = (g_inf-g)/tau_g;
    ode(g, time) = sel
      case (0.01{millisecond}*d_g > 0{dimensionless}) and (V > -60{millivolt}):
        0{dimensionless};
      otherwise:
        d_g;
    endsel;
    Ca_i_bufc = 1{dimensionless}/(1{dimensionless}+Buf_c*K_buf_c/sqr(Ca_i+K_buf_c));
    Ca_sr_bufsr = 1{dimensionless}/(1{dimensionless}+Buf_sr*K_buf_sr/sqr(Ca_SR+K_buf_sr));
    ode(Ca_i, time) = Ca_i_bufc*(i_leak-i_up+i_rel-(i_CaL+i_b_Ca+i_p_Ca-2{dimensionless}*i_NaCa)/(2{dimensionless}*V_c*F)*Cm);
    ode(Ca_SR, time) = Ca_sr_bufsr*V_c/V_sr*(i_up-(i_rel+i_leak));
  enddef;

  def comp sodium_dynamics as
    var Na_i: millimolar {pub: out, init: 11.6};
    var Na_o: millimolar {pub: out, init: 140};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var V_c: micrometre3 {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_b_Na: picoA_per_picoF {pub: in};
    ode(Na_i, time) = -(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(V_c*F)*Cm;
  enddef;

  def comp potassium_dynamics as
    var K_i: millimolar {pub: out, init: 138.3};
    var K_o: millimolar {pub: out, init: 5.4};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var V_c: micrometre3 {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_to: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_p_K: picoA_per_picoF {pub: in};
    var i_Stim: picoA_per_picoF {pub: in};
    ode(K_i, time) = -(i_K1+i_to+i_Kr+i_Ks+i_p_K+i_Stim-2{dimensionless}*i_NaK)/(V_c*F)*Cm;
  enddef;

  def comp stimulus_protocol as
    var Istim: picoA_per_picoF {pub: out};
    var IstimStart: millisecond {init: 100};
    var IstimEnd: millisecond {init: 50000};
    var IstimAmplitude: picoA_per_picoF {init: -52};
    var IstimPeriod: millisecond {init: 1000};
    var IstimPulseDuration: millisecond {init: 1};
    Istim = sel
      case (time >= IstimStart) and (time <= IstimEnd) and (time-IstimStart-floor((time-IstimStart)/IstimPeriod)*IstimPeriod <= IstimPulseDuration):
        IstimAmplitude;
      otherwise:
        0{picoA_per_picoF};
    endsel;
    var time: millisecond {pub: in};
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_current incl
        comp L_type_Ca_current_d_gate;
        comp L_type_Ca_current_f_gate;
        comp L_type_Ca_current_fCa_gate;
      endcomp;
      comp inward_rectifier_potassium_current;
      comp rapid_time_dependent_potassium_current incl
        comp rapid_time_dependent_potassium_current_Xr1_gate;
        comp rapid_time_dependent_potassium_current_Xr2_gate;
      endcomp;
      comp slow_time_dependent_potassium_current incl
        comp slow_time_dependent_potassium_current_Xs_gate;
      endcomp;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_potassium_pump_current;
      comp sodium_calcium_exchanger_current;
      comp calcium_pump_current;
      comp potassium_pump_current;
      comp calcium_dynamics;
      comp sodium_dynamics;
      comp potassium_dynamics;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_current incl
      comp L_type_Ca_current_d_gate;
      comp L_type_Ca_current_f_gate;
      comp L_type_Ca_current_fCa_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_Xr1_gate;
      comp rapid_time_dependent_potassium_current_Xr2_gate;
    endcomp;
    comp slow_time_dependent_potassium_current incl
      comp slow_time_dependent_potassium_current_Xs_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
  enddef;
  def map between membrane and stimulus_protocol for
    vars Istim and Istim;
  enddef;
  def map between environment and stimulus_protocol for
    vars time and time;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump_current and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger_current and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between sodium_dynamics and environment for
    vars time and time;
  enddef;
  def map between potassium_dynamics and environment for
    vars time and time;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_current for
    vars V and V;
    vars i_CaL and i_CaL;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and inward_rectifier_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_calcium_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_pump_current for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and potassium_pump_current for
    vars V and V;
    vars i_p_K and i_p_K;
  enddef;
  def map between membrane and calcium_dynamics for
    vars V and V;
    vars F and F;
    vars V_c and V_c;
    vars Cm and Cm;
  enddef;
  def map between membrane and sodium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars Cm and Cm;
  enddef;
  def map between membrane and potassium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars Cm and Cm;
    vars i_Stim and i_Stim;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and inward_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and rapid_time_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and potassium_pump_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_time_dependent_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and calcium_dynamics for
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
  enddef;
  def map between reversal_potentials and potassium_dynamics for
    vars K_o and K_o;
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and sodium_dynamics for
    vars Na_o and Na_o;
    vars Na_i and Na_i;
  enddef;
  def map between inward_rectifier_potassium_current and potassium_dynamics for
    vars i_K1 and i_K1;
  enddef;
  def map between rapid_time_dependent_potassium_current and potassium_dynamics for
    vars i_Kr and i_Kr;
    vars K_o and K_o;
  enddef;
  def map between slow_time_dependent_potassium_current and potassium_dynamics for
    vars i_Ks and i_Ks;
  enddef;
  def map between fast_sodium_current and sodium_dynamics for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_background_current and sodium_dynamics for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between L_type_Ca_current and calcium_dynamics for
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
    vars d and d;
    vars i_CaL and i_CaL;
  enddef;
  def map between calcium_pump_current and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between sodium_potassium_pump_current and potassium_dynamics for
    vars i_NaK and i_NaK;
    vars K_o and K_o;
  enddef;
  def map between sodium_potassium_pump_current and sodium_dynamics for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger_current and calcium_dynamics for
    vars i_NaCa and i_NaCa;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
  enddef;
  def map between sodium_calcium_exchanger_current and sodium_dynamics for
    vars i_NaCa and i_NaCa;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr1_gate for
    vars Xr1 and Xr1;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr2_gate for
    vars Xr2 and Xr2;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_fCa_gate for
    vars fCa and fCa;
    vars time and time;
    vars Ca_i and Ca_i;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and potassium_dynamics for
    vars i_to and i_to;
  enddef;
  def map between potassium_pump_current and potassium_dynamics for
    vars i_p_K and i_p_K;
  enddef;
enddef;
