// This CellML file was generated on 9/02/2010 at 11:26:55 at a.m. using:
//
// COR (0.9.31.1333)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// title: Evolutionary dynamics of mutator phenotypes in cancer: implications for chemotherapy (Complex Model)
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2003-12-18
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Komarova and Wodarz's 2003 mathematical model of the evolutionary dynamics of mutator phenotypes in cancer.
// comment: FN Catherine Lloyd; This is the CellML description of Komarova and Wodarz's 2003 mathematical model of the evolutionary dynamics of mutator phenotypes in cancer.
// reference: subject_type keyword; evolutionary dynamics; immunology; pharmacology; cancer
// reference: Pubmed_id 14583456; Given Natalia; Family Komarova; Other L; Given Dominik; Family Wodarz; title Evolutionary Dynamics of Mutator Phenotypes in Cancer: Implications for Chemotherapy; volume 63; first_page 6635; title Cancer Research; W3CDTF 2003-10-15; last_page 6642
def model komarova_2003 as
  // Evolutionary dynamics of mutator phenotypes in cancer: implications for chemotherapy
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This is the CellML description of the complex version of the model detailed in the paper. The model runs in both OpenCell and COR and the units are consistent, however it does not reproduce the correct published results as some of the parameter values are unknown.
  //
  // Model Structure
  //
  // ABSTRACT: Genetic instability is a central characteristic of cancers. However, the selective forces responsible for the emergence of genetic instability are not clear. We use mathematical models to determine the conditions under which selection favors instability, and when stable cells are advantageous. We take into account the processes of DNA damage, repair, cell cycle arrest, mutation, and death. We find that the rate of DNA damage can play a major role in this context. In particular, an increase in the rate of DNA damage can reverse the relative fitness of stable and unstable cells. In terms of cancer progression, we find the following results. If cells have intact apoptotic responses, stable cells prevail if the DNA hit rate is low. A high DNA hit rate can result in the selection of genetically unstable cells. This has implications for the induction of tumors by carcinogens. On the other hand, if cells are characterized by impaired apoptosis, we observe the opposite. Genetic instability is selected for if the DNA hit rate is low. A high DNA hit rate can select against instability and result in the persistence of stable cells. We propose that chemotherapy can be used to reverse the relative fitness of stable and unstable cells, such that unstable cells are the inferior competitors. This could result in the competitive exclusion of progressing cancer cells.
  //
  // The original paper reference is cited below:
  //
  // Evolutionary dynamics of mutator phenotypes in cancer: implications for chemotherapy, Natalia L. Komarova and Dominik Wodarz, 2003,Cancer Research, 63, 6635-6642. PubMed ID: 14583456 (http://www.ncbi.nlm.nih.gov/pubmed/14583456)
  //
  // cell diagram
  //
  // Schematic diagram of the model, showing the processes of cell reproduction, DNA damage, repair, cell cycle arrest, mutation and death.
  def unit hour as
    unit second {mult: 3600};
  enddef;
  def unit first_order_rate_constant as
    unit hour {expo: -1};
  enddef;
  def unit per_time2 as
    unit hour {expo: -2};
  enddef;
  def unit per_time3 as
    unit hour {expo: -3};
  enddef;

  def comp environment as
    var time: hour {pub: out};
  enddef;

  def comp S_0 as
    var S_0: dimensionless {init: 0.5, pub: out};
    var R_0: first_order_rate_constant {pub: in};
    var u_s: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(S_0, time) = R_0*S_0/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_s)-phi*S_0;
  enddef;

  def comp S_1 as
    var S_0: dimensionless {pub: in};
    var S_1: dimensionless {init: 0, pub: out};
    var R_0: first_order_rate_constant {pub: in};
    var R_1: first_order_rate_constant {pub: in};
    var epsilon_s: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_s: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(S_1, time) = alpha*u*R_0*S_0/1{per_time2}*(1{first_order_rate_constant}-epsilon_s)+R_1*S_1/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_s)-phi*S_1;
  enddef;

  def comp S_2 as
    var S_1: dimensionless {pub: in};
    var S_2: dimensionless {init: 0, pub: out};
    var R_1: first_order_rate_constant {pub: in};
    var R_2: first_order_rate_constant {pub: in};
    var epsilon_s: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_s: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(S_2, time) = alpha*u*R_1*S_1/1{per_time2}*(1{first_order_rate_constant}-epsilon_s)+R_2*S_2/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_s)-phi*S_2;
  enddef;

  def comp S_3 as
    var S_2: dimensionless {pub: in};
    var S_3: dimensionless {init: 0, pub: out};
    var R_2: first_order_rate_constant {pub: in};
    var R_3: first_order_rate_constant {pub: in};
    var epsilon_s: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_s: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(S_3, time) = alpha*u*R_2*S_2/1{per_time2}*(1{first_order_rate_constant}-epsilon_s)+R_3*S_3/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_s)-phi*S_3;
  enddef;

  def comp S_4 as
    var S_3: dimensionless {pub: in};
    var S_4: dimensionless {init: 0, pub: out};
    var R_3: first_order_rate_constant {pub: in};
    var R_4: first_order_rate_constant {pub: in};
    var epsilon_s: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_s: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(S_4, time) = alpha*u*R_3*S_3/1{per_time2}*(1{first_order_rate_constant}-epsilon_s)+R_4*S_4/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_s)-phi*S_4;
  enddef;

  def comp S_5 as
    var S_4: dimensionless {pub: in};
    var S_5: dimensionless {init: 0, pub: out};
    var R_4: first_order_rate_constant {pub: in};
    var R_5: first_order_rate_constant {pub: in};
    var epsilon_s: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_s: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(S_5, time) = alpha*u*R_4*S_4/1{per_time2}*(1{first_order_rate_constant}-epsilon_s)+R_5*S_5/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_s)-phi*S_5;
  enddef;

  def comp S_6 as
    var S_5: dimensionless {pub: in};
    var S_6: dimensionless {init: 0, pub: out};
    var R_5: first_order_rate_constant {pub: in};
    var R_6: first_order_rate_constant {pub: in};
    var epsilon_s: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_s: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(S_6, time) = alpha*u*R_5*S_5/1{per_time2}*(1{first_order_rate_constant}-epsilon_s)+R_6*S_6/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_s)-phi*S_6;
  enddef;

  def comp S_7 as
    var S_6: dimensionless {pub: in};
    var S_7: dimensionless {init: 0, pub: out};
    var R_6: first_order_rate_constant {pub: in};
    var R_7: first_order_rate_constant {pub: in};
    var epsilon_s: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_s: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(S_7, time) = alpha*u*R_6*S_6/1{per_time2}*(1{first_order_rate_constant}-epsilon_s)+R_7*S_7/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_s)-phi*S_7;
  enddef;

  def comp S_8 as
    var S_7: dimensionless {pub: in};
    var S_8: dimensionless {init: 0, pub: out};
    var R_7: first_order_rate_constant {pub: in};
    var R_8: first_order_rate_constant {pub: in};
    var epsilon_s: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_s: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(S_8, time) = alpha*u*R_7*S_7/1{per_time2}*(1{first_order_rate_constant}-epsilon_s)+R_8*S_8/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_s)-phi*S_8;
  enddef;

  def comp M_0 as
    var M_0: dimensionless {init: 0.5, pub: out};
    var R_0: first_order_rate_constant {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(M_0, time) = R_0*M_0/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_m)-phi*M_0;
  enddef;

  def comp M_1 as
    var M_0: dimensionless {pub: in};
    var M_1: dimensionless {init: 0, pub: out};
    var M_1_2: dimensionless {init: 0, pub: out};
    var R_0: first_order_rate_constant {pub: in};
    var R_1: first_order_rate_constant {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(M_1, time) = M_0*1{first_order_rate_constant};
    ode(M_1_2, time) = alpha*u*R_0*M_0/1{per_time2}*(1{first_order_rate_constant}-epsilon_m)+R_1*M_1/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_m)-phi*M_1;
  enddef;

  def comp M_2 as
    var M_1: dimensionless {pub: in};
    var M_2: dimensionless {init: 0, pub: out};
    var R_1: first_order_rate_constant {pub: in};
    var R_2: first_order_rate_constant {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(M_2, time) = alpha*u*R_1*M_1/1{per_time2}*(1{first_order_rate_constant}-epsilon_m)+R_2*M_2/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_m)-phi*M_2;
  enddef;

  def comp M_3 as
    var M_2: dimensionless {pub: in};
    var M_3: dimensionless {init: 0, pub: out};
    var R_2: first_order_rate_constant {pub: in};
    var R_3: first_order_rate_constant {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(M_3, time) = alpha*u*R_2*M_2/1{per_time2}*(1{first_order_rate_constant}-epsilon_m)+R_3*M_3/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_m)-phi*M_3;
  enddef;

  def comp M_4 as
    var M_3: dimensionless {pub: in};
    var M_4: dimensionless {init: 0, pub: out};
    var R_3: first_order_rate_constant {pub: in};
    var R_4: first_order_rate_constant {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(M_4, time) = alpha*u*R_3*M_4/1{per_time2}*(1{first_order_rate_constant}-epsilon_m)+R_4*M_4/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_m)-phi*M_4;
  enddef;

  def comp M_5 as
    var M_4: dimensionless {pub: in};
    var M_5: dimensionless {init: 0, pub: out};
    var R_4: first_order_rate_constant {pub: in};
    var R_5: first_order_rate_constant {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(M_5, time) = alpha*u*R_4*M_4/1{per_time2}*(1{first_order_rate_constant}-epsilon_m)+R_5*M_5/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_m)-phi*M_5;
  enddef;

  def comp M_6 as
    var M_5: dimensionless {pub: in};
    var M_6: dimensionless {init: 0, pub: out};
    var R_5: first_order_rate_constant {pub: in};
    var R_6: first_order_rate_constant {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(M_6, time) = alpha*u*R_5*M_5/1{per_time2}*(1{first_order_rate_constant}-epsilon_m)+R_6*M_6/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_m)-phi*M_6;
  enddef;

  def comp M_7 as
    var M_6: dimensionless {pub: in};
    var M_7: dimensionless {init: 0, pub: out};
    var R_6: first_order_rate_constant {pub: in};
    var R_7: first_order_rate_constant {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(M_7, time) = alpha*u*R_6*M_6/1{per_time2}*(1{first_order_rate_constant}-epsilon_m)+R_7*M_7/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_m)-phi*M_7;
  enddef;

  def comp M_8 as
    var M_7: dimensionless {pub: in};
    var M_8: dimensionless {init: 0, pub: out};
    var R_7: first_order_rate_constant {pub: in};
    var R_8: first_order_rate_constant {pub: in};
    var S_8: dimensionless {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var alpha: dimensionless {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var u: first_order_rate_constant {pub: in};
    var phi: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(M_8, time) = alpha*u*R_7*M_7/1{per_time2}*(1{first_order_rate_constant}-epsilon_m)+R_8*M_8/1{first_order_rate_constant}*(1{first_order_rate_constant}-u_m+alpha*u/1{first_order_rate_constant}*(1{first_order_rate_constant}-epsilon_m))-phi*S_8;
  enddef;

  def comp R as
    var R_0: first_order_rate_constant {pub: out};
    var R_1: first_order_rate_constant {pub: out};
    var R_2: first_order_rate_constant {pub: out};
    var R_3: first_order_rate_constant {pub: out};
    var R_4: first_order_rate_constant {pub: out};
    var R_5: first_order_rate_constant {pub: out};
    var R_6: first_order_rate_constant {pub: out};
    var R_7: first_order_rate_constant {pub: out};
    var R_8: first_order_rate_constant {pub: out};
    var r_0: first_order_rate_constant {init: 0.5};
    var r_1: first_order_rate_constant {init: 0.6};
    var r_2: first_order_rate_constant {init: 0.7};
    var r_3: first_order_rate_constant {init: 0.8};
    var r_4: first_order_rate_constant {init: 0.9};
    var r_5: first_order_rate_constant {init: 1};
    var r_6: first_order_rate_constant {init: 1.1};
    var r_7: first_order_rate_constant {init: 1.2};
    var r_8: first_order_rate_constant {init: 1.3};
    var alpha: dimensionless {pub: in};
    var a: dimensionless {pub: in};
    R_0 = r_0;
    R_1 = r_1*(1{dimensionless}-a);
    R_2 = r_2*(1{dimensionless}-a);
    R_3 = r_3*(1{dimensionless}-a);
    R_4 = r_4*(1{dimensionless}-a);
    R_5 = r_5*(1{dimensionless}-a);
    R_6 = r_6*(1{dimensionless}-a);
    R_7 = r_7*(1{dimensionless}-a);
    R_8 = r_8*(1{dimensionless}-a);
  enddef;

  def comp phi as
    var phi: first_order_rate_constant {pub: out};
    var u_s: first_order_rate_constant {pub: in};
    var u_m: first_order_rate_constant {pub: in};
    var S_0: dimensionless {pub: in};
    var S_1: dimensionless {pub: in};
    var S_2: dimensionless {pub: in};
    var S_3: dimensionless {pub: in};
    var S_4: dimensionless {pub: in};
    var S_5: dimensionless {pub: in};
    var S_6: dimensionless {pub: in};
    var S_7: dimensionless {pub: in};
    var S_8: dimensionless {pub: in};
    var M_1: dimensionless {pub: in};
    var M_2: dimensionless {pub: in};
    var M_3: dimensionless {pub: in};
    var M_4: dimensionless {pub: in};
    var M_5: dimensionless {pub: in};
    var M_6: dimensionless {pub: in};
    var M_7: dimensionless {pub: in};
    var M_8: dimensionless {pub: in};
    var R_0: first_order_rate_constant {pub: in};
    var R_1: first_order_rate_constant {pub: in};
    var R_2: first_order_rate_constant {pub: in};
    var R_3: first_order_rate_constant {pub: in};
    var R_4: first_order_rate_constant {pub: in};
    var R_5: first_order_rate_constant {pub: in};
    var R_6: first_order_rate_constant {pub: in};
    var R_7: first_order_rate_constant {pub: in};
    var R_8: first_order_rate_constant {pub: in};
    phi = (1{first_order_rate_constant}-u_s)/1{first_order_rate_constant}*(R_0*S_0+R_1*S_1+R_2*S_2+R_3*S_3+R_4*S_4)+(1{first_order_rate_constant}-u_m)/1{first_order_rate_constant}*(R_1*M_1+R_2*M_2+R_3*M_3+R_4*M_4);
  enddef;

  def comp w as
    var time: hour {pub: in};
    var w: dimensionless {init: 0};
    var alpha: dimensionless {pub: in};
    var u: first_order_rate_constant {pub: in};
    var epsilon_s: first_order_rate_constant {pub: in};
    var R_0: first_order_rate_constant {pub: in};
    var S_0: dimensionless {pub: in};
    var R_1: first_order_rate_constant {pub: in};
    var S_1: dimensionless {pub: in};
    var R_2: first_order_rate_constant {pub: in};
    var S_2: dimensionless {pub: in};
    var R_3: first_order_rate_constant {pub: in};
    var S_3: dimensionless {pub: in};
    var R_4: first_order_rate_constant {pub: in};
    var S_4: dimensionless {pub: in};
    var R_5: first_order_rate_constant {pub: in};
    var S_5: dimensionless {pub: in};
    var R_6: first_order_rate_constant {pub: in};
    var S_6: dimensionless {pub: in};
    var R_7: first_order_rate_constant {pub: in};
    var S_7: dimensionless {pub: in};
    var R_8: first_order_rate_constant {pub: in};
    var S_8: dimensionless {pub: in};
    var epsilon_m: first_order_rate_constant {pub: in};
    var M_0: dimensionless {pub: in};
    var M_1: dimensionless {pub: in};
    var M_2: dimensionless {pub: in};
    var M_3: dimensionless {pub: in};
    var M_4: dimensionless {pub: in};
    var M_5: dimensionless {pub: in};
    var M_6: dimensionless {pub: in};
    var M_7: dimensionless {pub: in};
    var M_8: dimensionless {pub: in};
    var phi: first_order_rate_constant {pub: in};
    ode(w, time) = (1{dimensionless}-alpha)*u/1{per_time2}*((1{first_order_rate_constant}-epsilon_s)*(R_0*S_0+R_1*S_1+R_2*S_2+R_3*S_3+R_4*S_4+R_5*S_5+R_6*S_6+R_7*S_7+R_8*S_8)+(1{first_order_rate_constant}-epsilon_m)*(R_0*M_0+R_1*M_1+R_2*M_2+R_3*M_3+R_4*M_4+R_5*M_5+R_6*M_6+R_7*M_7+R_8*M_8))-phi*w;
  enddef;

  def comp total_cells as
    var total_cells: dimensionless;
    var stable_total: dimensionless;
    var mutant_total: dimensionless;
    var S_0: dimensionless {pub: in};
    var S_1: dimensionless {pub: in};
    var S_2: dimensionless {pub: in};
    var S_3: dimensionless {pub: in};
    var S_4: dimensionless {pub: in};
    var S_5: dimensionless {pub: in};
    var S_6: dimensionless {pub: in};
    var S_7: dimensionless {pub: in};
    var S_8: dimensionless {pub: in};
    var M_0: dimensionless {pub: in};
    var M_1: dimensionless {pub: in};
    var M_2: dimensionless {pub: in};
    var M_3: dimensionless {pub: in};
    var M_4: dimensionless {pub: in};
    var M_5: dimensionless {pub: in};
    var M_6: dimensionless {pub: in};
    var M_7: dimensionless {pub: in};
    var M_8: dimensionless {pub: in};
    total_cells = S_0+S_1+S_2+S_3+S_4+S_5+S_6+S_7+S_8+M_0+M_2+M_3+M_4+M_5+M_6+M_7+M_8;
    stable_total = S_0+S_1+S_2+S_3+S_4+S_5+S_6+S_7+S_8;
    mutant_total = M_0+M_2+M_3+M_4+M_5+M_6+M_7+M_8;
  enddef;

  def comp kinetic_parameters as
    var alpha: dimensionless {init: 0.6, pub: out};
    var beta: dimensionless {init: 0.2, pub: out};
    var a: dimensionless {init: 0.5, pub: out};
    var u: first_order_rate_constant {init: 0.07, pub: out};
    var u_s: first_order_rate_constant {pub: out};
    var u_m: first_order_rate_constant {pub: out};
    var epsilon_m: first_order_rate_constant {init: 0.1, pub: out};
    var epsilon_s: first_order_rate_constant {init: 0.99, pub: out};
    u_s = u*(1{dimensionless}-beta*epsilon_s/1{first_order_rate_constant});
    u_m = u*(1{dimensionless}-beta*epsilon_m/1{first_order_rate_constant});
  enddef;
  def map between S_0 and environment for
    vars time and time;
  enddef;
  def map between S_1 and environment for
    vars time and time;
  enddef;
  def map between S_2 and environment for
    vars time and time;
  enddef;
  def map between S_3 and environment for
    vars time and time;
  enddef;
  def map between S_4 and environment for
    vars time and time;
  enddef;
  def map between S_5 and environment for
    vars time and time;
  enddef;
  def map between S_6 and environment for
    vars time and time;
  enddef;
  def map between S_7 and environment for
    vars time and time;
  enddef;
  def map between S_8 and environment for
    vars time and time;
  enddef;
  def map between M_0 and environment for
    vars time and time;
  enddef;
  def map between M_1 and environment for
    vars time and time;
  enddef;
  def map between M_2 and environment for
    vars time and time;
  enddef;
  def map between M_3 and environment for
    vars time and time;
  enddef;
  def map between M_4 and environment for
    vars time and time;
  enddef;
  def map between M_5 and environment for
    vars time and time;
  enddef;
  def map between M_6 and environment for
    vars time and time;
  enddef;
  def map between M_7 and environment for
    vars time and time;
  enddef;
  def map between M_8 and environment for
    vars time and time;
  enddef;
  def map between w and environment for
    vars time and time;
  enddef;
  def map between S_0 and phi for
    vars phi and phi;
    vars S_0 and S_0;
  enddef;
  def map between S_1 and phi for
    vars phi and phi;
    vars S_1 and S_1;
  enddef;
  def map between S_2 and phi for
    vars phi and phi;
    vars S_2 and S_2;
  enddef;
  def map between S_3 and phi for
    vars phi and phi;
    vars S_3 and S_3;
  enddef;
  def map between S_4 and phi for
    vars phi and phi;
    vars S_4 and S_4;
  enddef;
  def map between S_5 and phi for
    vars phi and phi;
    vars S_5 and S_5;
  enddef;
  def map between S_6 and phi for
    vars phi and phi;
    vars S_6 and S_6;
  enddef;
  def map between S_7 and phi for
    vars phi and phi;
    vars S_7 and S_7;
  enddef;
  def map between S_8 and phi for
    vars phi and phi;
    vars S_8 and S_8;
  enddef;
  def map between M_0 and phi for
    vars phi and phi;
  enddef;
  def map between M_1 and phi for
    vars phi and phi;
    vars M_1 and M_1;
  enddef;
  def map between M_2 and phi for
    vars phi and phi;
    vars M_2 and M_2;
  enddef;
  def map between M_3 and phi for
    vars phi and phi;
    vars M_3 and M_3;
  enddef;
  def map between M_4 and phi for
    vars phi and phi;
    vars M_4 and M_4;
  enddef;
  def map between M_5 and phi for
    vars phi and phi;
    vars M_5 and M_5;
  enddef;
  def map between M_6 and phi for
    vars phi and phi;
    vars M_6 and M_6;
  enddef;
  def map between M_7 and phi for
    vars phi and phi;
    vars M_7 and M_7;
  enddef;
  def map between M_8 and phi for
    vars phi and phi;
    vars M_8 and M_8;
  enddef;
  def map between R and phi for
    vars R_0 and R_0;
    vars R_1 and R_1;
    vars R_2 and R_2;
    vars R_3 and R_3;
    vars R_4 and R_4;
    vars R_5 and R_5;
    vars R_6 and R_6;
    vars R_7 and R_7;
    vars R_8 and R_8;
  enddef;
  def map between R and w for
    vars R_0 and R_0;
    vars R_1 and R_1;
    vars R_2 and R_2;
    vars R_3 and R_3;
    vars R_4 and R_4;
    vars R_5 and R_5;
    vars R_6 and R_6;
    vars R_7 and R_7;
    vars R_8 and R_8;
  enddef;
  def map between S_0 and S_1 for
    vars S_0 and S_0;
  enddef;
  def map between S_1 and S_2 for
    vars S_1 and S_1;
  enddef;
  def map between S_2 and S_3 for
    vars S_2 and S_2;
  enddef;
  def map between S_3 and S_4 for
    vars S_3 and S_3;
  enddef;
  def map between S_4 and S_5 for
    vars S_4 and S_4;
  enddef;
  def map between S_5 and S_6 for
    vars S_5 and S_5;
  enddef;
  def map between S_6 and S_7 for
    vars S_6 and S_6;
  enddef;
  def map between S_7 and S_8 for
    vars S_7 and S_7;
  enddef;
  def map between M_0 and M_1 for
    vars M_0 and M_0;
  enddef;
  def map between M_1 and M_2 for
    vars M_1 and M_1;
  enddef;
  def map between M_2 and M_3 for
    vars M_2 and M_2;
  enddef;
  def map between M_3 and M_4 for
    vars M_3 and M_3;
  enddef;
  def map between M_4 and M_5 for
    vars M_4 and M_4;
  enddef;
  def map between M_5 and M_6 for
    vars M_5 and M_5;
  enddef;
  def map between M_6 and M_7 for
    vars M_6 and M_6;
  enddef;
  def map between M_7 and M_8 for
    vars M_7 and M_7;
  enddef;
  def map between R and S_0 for
    vars R_0 and R_0;
  enddef;
  def map between R and S_1 for
    vars R_0 and R_0;
    vars R_1 and R_1;
  enddef;
  def map between R and S_2 for
    vars R_1 and R_1;
    vars R_2 and R_2;
  enddef;
  def map between R and S_3 for
    vars R_2 and R_2;
    vars R_3 and R_3;
  enddef;
  def map between R and S_4 for
    vars R_3 and R_3;
    vars R_4 and R_4;
  enddef;
  def map between R and S_5 for
    vars R_4 and R_4;
    vars R_5 and R_5;
  enddef;
  def map between R and S_6 for
    vars R_5 and R_5;
    vars R_6 and R_6;
  enddef;
  def map between R and S_7 for
    vars R_6 and R_6;
    vars R_7 and R_7;
  enddef;
  def map between R and S_8 for
    vars R_7 and R_7;
    vars R_8 and R_8;
  enddef;
  def map between R and M_0 for
    vars R_0 and R_0;
  enddef;
  def map between R and M_1 for
    vars R_0 and R_0;
    vars R_1 and R_1;
  enddef;
  def map between R and M_2 for
    vars R_1 and R_1;
    vars R_2 and R_2;
  enddef;
  def map between R and M_3 for
    vars R_2 and R_2;
    vars R_3 and R_3;
  enddef;
  def map between R and M_4 for
    vars R_3 and R_3;
    vars R_4 and R_4;
  enddef;
  def map between R and M_5 for
    vars R_4 and R_4;
    vars R_5 and R_5;
  enddef;
  def map between R and M_6 for
    vars R_5 and R_5;
    vars R_6 and R_6;
  enddef;
  def map between R and M_7 for
    vars R_6 and R_6;
    vars R_7 and R_7;
  enddef;
  def map between R and M_8 for
    vars R_7 and R_7;
    vars R_8 and R_8;
  enddef;
  def map between S_0 and w for
    vars S_0 and S_0;
  enddef;
  def map between S_1 and w for
    vars S_1 and S_1;
  enddef;
  def map between S_2 and w for
    vars S_2 and S_2;
  enddef;
  def map between S_3 and w for
    vars S_3 and S_3;
  enddef;
  def map between S_4 and w for
    vars S_4 and S_4;
  enddef;
  def map between S_5 and w for
    vars S_5 and S_5;
  enddef;
  def map between S_6 and w for
    vars S_6 and S_6;
  enddef;
  def map between S_7 and w for
    vars S_7 and S_7;
  enddef;
  def map between S_8 and w for
    vars S_8 and S_8;
  enddef;
  def map between M_0 and w for
    vars M_0 and M_0;
  enddef;
  def map between M_1 and w for
    vars M_1 and M_1;
  enddef;
  def map between M_2 and w for
    vars M_2 and M_2;
  enddef;
  def map between M_3 and w for
    vars M_3 and M_3;
  enddef;
  def map between M_4 and w for
    vars M_4 and M_4;
  enddef;
  def map between M_5 and w for
    vars M_5 and M_5;
  enddef;
  def map between M_6 and w for
    vars M_6 and M_6;
  enddef;
  def map between M_7 and w for
    vars M_7 and M_7;
  enddef;
  def map between M_8 and w for
    vars M_8 and M_8;
  enddef;
  def map between phi and w for
    vars phi and phi;
  enddef;
  def map between S_8 and M_8 for
    vars S_8 and S_8;
  enddef;
  def map between S_0 and total_cells for
    vars S_0 and S_0;
  enddef;
  def map between S_1 and total_cells for
    vars S_1 and S_1;
  enddef;
  def map between S_2 and total_cells for
    vars S_2 and S_2;
  enddef;
  def map between S_3 and total_cells for
    vars S_3 and S_3;
  enddef;
  def map between S_4 and total_cells for
    vars S_4 and S_4;
  enddef;
  def map between S_5 and total_cells for
    vars S_5 and S_5;
  enddef;
  def map between S_6 and total_cells for
    vars S_6 and S_6;
  enddef;
  def map between S_7 and total_cells for
    vars S_7 and S_7;
  enddef;
  def map between S_8 and total_cells for
    vars S_8 and S_8;
  enddef;
  def map between M_0 and total_cells for
    vars M_0 and M_0;
  enddef;
  def map between M_1 and total_cells for
    vars M_1 and M_1;
  enddef;
  def map between M_2 and total_cells for
    vars M_2 and M_2;
  enddef;
  def map between M_3 and total_cells for
    vars M_3 and M_3;
  enddef;
  def map between M_4 and total_cells for
    vars M_4 and M_4;
  enddef;
  def map between M_5 and total_cells for
    vars M_5 and M_5;
  enddef;
  def map between M_6 and total_cells for
    vars M_6 and M_6;
  enddef;
  def map between M_7 and total_cells for
    vars M_7 and M_7;
  enddef;
  def map between M_8 and total_cells for
    vars M_8 and M_8;
  enddef;
  def map between S_0 and kinetic_parameters for
    vars u_s and u_s;
  enddef;
  def map between S_1 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_s and u_s;
    vars epsilon_s and epsilon_s;
  enddef;
  def map between S_2 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_s and u_s;
    vars epsilon_s and epsilon_s;
  enddef;
  def map between S_3 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_s and u_s;
    vars epsilon_s and epsilon_s;
  enddef;
  def map between S_4 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_s and u_s;
    vars epsilon_s and epsilon_s;
  enddef;
  def map between S_5 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_s and u_s;
    vars epsilon_s and epsilon_s;
  enddef;
  def map between S_6 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_s and u_s;
    vars epsilon_s and epsilon_s;
  enddef;
  def map between S_7 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_s and u_s;
    vars epsilon_s and epsilon_s;
  enddef;
  def map between S_8 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_s and u_s;
    vars epsilon_s and epsilon_s;
  enddef;
  def map between M_0 and kinetic_parameters for
    vars alpha and alpha;
    vars u_m and u_m;
    vars epsilon_m and epsilon_m;
  enddef;
  def map between M_1 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_m and u_m;
    vars epsilon_m and epsilon_m;
  enddef;
  def map between M_2 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_m and u_m;
    vars epsilon_m and epsilon_m;
  enddef;
  def map between M_3 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_m and u_m;
    vars epsilon_m and epsilon_m;
  enddef;
  def map between M_4 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_m and u_m;
    vars epsilon_m and epsilon_m;
  enddef;
  def map between M_5 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_m and u_m;
    vars epsilon_m and epsilon_m;
  enddef;
  def map between M_6 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_m and u_m;
    vars epsilon_m and epsilon_m;
  enddef;
  def map between M_7 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_m and u_m;
    vars epsilon_m and epsilon_m;
  enddef;
  def map between M_8 and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars u_m and u_m;
    vars epsilon_m and epsilon_m;
  enddef;
  def map between R and kinetic_parameters for
    vars alpha and alpha;
    vars a and a;
  enddef;
  def map between phi and kinetic_parameters for
    vars u_s and u_s;
    vars u_m and u_m;
  enddef;
  def map between w and kinetic_parameters for
    vars alpha and alpha;
    vars u and u;
    vars epsilon_s and epsilon_s;
    vars epsilon_m and epsilon_m;
  enddef;
enddef;
