//   FILE :  joseph_model_2003.xml
//
// CREATED :  9th April 2004
//
// LAST MODIFIED : 27th April 2005
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Joseph et al.'s 2003 mathematical model of human gastric acid secretion.
// CHANGES:
//    27/04/2005 - PJV - Changed unit dimensions to make them consistent.
// publisher: The University of Auckland, Bioengineering Institute
// created: W3CDTF 2004-04-09
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Joseph et al.'s 2003 mathematical model of human gastric acid secretion.
// comment: FN Catherine Lloyd; This is the CellML description of Joseph et al.'s 2003 mathematical model of human gastric acid secretion.
// reference: Pubmed_id 12433865; Given Ian; Family Joseph; Other M; Other P; Given Yana; Family Zavros; Given Juanita; Family Merchant; Other L; Given Denise; Family Kirschner; title A model for integrative study of human gastric acid secretion; volume 94; first_page 1602; title Journal of Applied Physiology; W3CDTF 2003-04; last_page 1618
// reference: subject_type keyword; gastric; acid secretion; gastric acid; parietal cell
def model joseph_zavros_merchant_kirschner_2003_version01 as
  // Modelling Human Gastric Acid Secretion
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // Acid secretion from parietal cells in the stomach is a highly regulated, complex, and dynamic process which is optimised to facilitate food digestion. It involves both the central and the enteric nervous systems (CNS and ENS respectively), in addition to a network of paracrine and endocrine cells. The overall aim is to maintain stomach luminal pH within a narrow range such that food digestion is optimised.
  //
  // Four cell populations and their secretory products form the core acid secretory process in humans. These four cell populations are gastrin (G)- and somatostatin (D)-secreting cells, endochromaffin-like (ECL) cells, and parietal cells. G and ECL cell products stimulate acid secretion (positive feedback) and D cells inhibit acid release (negative feedback). Exactly how these feedback loops interact is species specific, however, the basic requirement for acid secretion is conserved amongst species. Mathematical modelling provides a powerful tool for investigating the integrated system, and it is also immune to the inconsistencies of in vivo and in vitro experimental studies.
  //
  // In the Joseph et al. 2003 publication described here, the authors use a novel mathematical model to describe the complex system of gastric acid regulation (see and below). They use experimental data to validate their model simulations, and then go onto use the model to study conditions that are not yet experimentally reproducible.
  //
  // The model has been described here in CellML (the raw CellML description of the Joseph et al. 2003 model can be downloaded in various formats as described in ).
  //
  // The complete original paper reference is cited below:
  //
  // A model for integrative study of human gastric acid secretion (http://jap.physiology.org/cgi/content/abstract/94/4/1602), Ian M.P. Joseph, Yana Zavros, Juanita L. Merchant, and Denise Kirschner, 2003, Journal of Applied Physiology (http://jap.physiology.org/), 94, 1602-1618. (Full text (HTML) (http://jap.physiology.org/cgi/content/full/94/4/1602) and PDF (http://jap.physiology.org/cgi/reprint/94/4/1602.pdf) versions of the article are available to subscibers on the Journal of Applied Physiology website.) PubMed ID: 12433865 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12433865&dopt=Abstract)
  //
  // cell diagram1
  //
  // Development of G, D, ECL, and parietal cells from the underlying antral and corpus stem cells. A: differentiation within the antrum and B: differentiation within the corpus.
  def unit hour as
    unit second {mult: 3600.0};
  enddef;
  def unit first_order_rate_constant as
    unit hour {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit molar_per_hour_cell as
    unit molar;
    unit hour {expo: -1};
    unit cell {expo: -1};
  enddef;
  def unit cell as base unit;

  def comp environment as
    var time: hour {pub: out};
  enddef;

  def comp Asc as
    var Asc: cell {pub: out};
    var C_Asc: first_order_rate_constant;
    var gamma_Asc: first_order_rate_constant;
    var pG: first_order_rate_constant {pub: in};
    var pDA: first_order_rate_constant {pub: in};
    var T_Asc: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(Asc, time) = gamma_Asc*Asc*(C_Asc-Asc)-(pG+pDA)*T_Asc*Asc;
  enddef;

  def comp Csc as
    var Csc: cell {pub: out};
    var C_Csc: cell;
    var gamma_Csc: first_order_rate_constant;
    var alpha_Csc: first_order_rate_constant;
    var gmax: first_order_rate_constant;
    var GtnC: molar {pub: in};
    var pE: first_order_rate_constant {pub: in};
    var pDC: first_order_rate_constant {pub: in};
    var pP: first_order_rate_constant {pub: in};
    var T_Csc: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(Csc, time) = gamma_Csc*Csc*(C_Csc-Csc)+gmax*sqr(GtnC)/(sqr(GtnC)+sqr(alpha_Csc))*Csc-(pE+pDC+pP)*T_Csc*Csc;
  enddef;

  def comp G as
    var G: cell {pub: out};
    var k_gmax: first_order_rate_constant;
    var gamma_Gc: first_order_rate_constant;
    var AC: molar {pub: in};
    var Fd: first_order_rate_constant {pub: in};
    var alpha_HA: first_order_rate_constant {pub: in};
    var pG: first_order_rate_constant {pub: in};
    var gamma_Fdmax: first_order_rate_constant {pub: in};
    var alpha_Fd: first_order_rate_constant {pub: in};
    var Asc: cell {pub: in};
    var T_Asc: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(G, time) = pG*T_Asc*Asc+k_gmax*(1.0{dimensionless}-sqr(AC)/(sqr(AC)+sqr(alpha_HA)))*G-(gamma_Fdmax*(1.0{dimensionless}-sqr(Fd)/(sqr(Fd)+sqr(alpha_Fd)))*G+gamma_Gc*G);
  enddef;

  def comp DA as
    var DA: cell {pub: out};
    var k_dmax: first_order_rate_constant;
    var gamma_DA: first_order_rate_constant;
    var AC: molar {pub: in};
    var Fd: first_order_rate_constant {pub: in};
    var pDA: first_order_rate_constant {pub: in};
    var alpha_HA: first_order_rate_constant {pub: in};
    var gamma_Fdmax: first_order_rate_constant {pub: in};
    var alpha_Fd: first_order_rate_constant {pub: in};
    var Asc: cell {pub: in};
    var T_Asc: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(DA, time) = pDA*T_Asc*Asc+k_dmax*sqr(AC)/(sqr(AC)+sqr(alpha_HA))*DA+gamma_Fdmax*(1.0{dimensionless}-sqr(Fd)/(sqr(Fd)+sqr(alpha_Fd)))*DA-gamma_DA*DA;
  enddef;

  def comp DC as
    var DC: cell {pub: out};
    var gamma_DC: first_order_rate_constant;
    var pDC: first_order_rate_constant {pub: in};
    var Csc: cell {pub: in};
    var T_Asc: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(DC, time) = pDC*T_Asc*Csc-gamma_DC*DC;
  enddef;

  def comp E as
    var E: cell {pub: out};
    var k_Emax: first_order_rate_constant;
    var gamma_E: first_order_rate_constant;
    var alpha_E: first_order_rate_constant;
    var pE: first_order_rate_constant {pub: in};
    var GtnC: molar {pub: in};
    var Csc: cell {pub: in};
    var T_Csc: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(E, time) = pE*T_Csc*Csc-gamma_E*E+k_Emax*sqr(GtnC)/(sqr(GtnC)+sqr(alpha_E))*E;
  enddef;

  def comp P as
    var P: cell {pub: out};
    var gamma_P: first_order_rate_constant;
    var pP: first_order_rate_constant {pub: in};
    var Csc: cell {pub: in};
    var T_Csc: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(P, time) = pP*T_Csc*Csc-gamma_P*P;
  enddef;

  def comp feedback_mechanisms as
    var pG: first_order_rate_constant {pub: out};
    var pDA: first_order_rate_constant {pub: out};
    var pP: first_order_rate_constant {pub: out};
    var pE: first_order_rate_constant {pub: out};
    var pDC: first_order_rate_constant {pub: out};
    var f: dimensionless;
    var N_: cell;
    var G: cell {pub: in};
    var DA: cell {pub: in};
    var DC: cell {pub: in};
    var E: cell {pub: in};
    var P: cell {pub: in};
    pG = exp(-f*sqr(G)/sqr(N_));
    pDA = exp(-f*sqr(DA)/sqr(N_));
    pDC = exp(-f*sqr(DC)/sqr(N_));
    pP = exp(-f*sqr(P)/sqr(N_));
    pE = exp(-f*sqr(E)/sqr(N_));
  enddef;

  def comp GtnA as
    var GtnA: molar {pub: out};
    var KNG1: molar_per_hour_cell {init: 6.28E-17};
    var KNG2: molar_per_hour_cell {init: 8.75E-17};
    var KFG: first_order_rate_constant;
    var kAG: molar;
    var kSG: molar {init: 9.0E-11};
    var kG: first_order_rate_constant;
    var alpha_NG1: molar {init: 1.0E-10};
    var alpha_NG2: molar {init: 1.0E-10};
    var alpha_Fd: first_order_rate_constant {pub: in};
    var beta_G: first_order_rate_constant {pub: in};
    var AC: molar {pub: in};
    var G: cell {pub: in};
    var SA: molar {pub: in};
    var NC: first_order_rate_constant {pub: in};
    var NE: first_order_rate_constant {pub: in};
    var Fd: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(GtnA, time) = -(G*(KNG1*NE/((NE+alpha_NG1)*(1.0{dimensionless}+SA/kSG)*(1.0{dimensionless}+sqr(AC)/(sqr(AC)+sqr(kAG))))+KNG2*NC/((NC+alpha_NG2)*(1.0{dimensionless}+SA/kSG)*(1.0{dimensionless}+sqr(AC)/(sqr(AC)+sqr(kAG))))+KFG*Fd/((Fd+alpha_Fd)*(1.0{dimensionless}+SA/kSG)*(1.0{dimensionless}+sqr(AC)/(sqr(AC)+sqr(kAG)))))*((kG+beta_G)*GtnA));
  enddef;

  def comp GtnC as
    var GtnC: molar {pub: out};
    var kappa_G: molar_per_hour_cell;
    var beta_G: first_order_rate_constant {pub: in};
    var GtnA: molar {pub: in};
    var time: hour {pub: in};
    ode(GtnC, time) = beta_G*GtnA-kappa_G*GtnC;
  enddef;

  def comp SA as
    var SA: molar {pub: out};
    var KAS: molar_per_hour_cell {init: 8.04E-15};
    var alpha_AS: molar {init: 0.05};
    var kappa_S: molar_per_hour_cell {pub: in};
    var alpha_NS: molar {pub: in};
    var kNS: molar {pub: in};
    var kSS: molar {pub: in};
    var KGS: molar_per_hour_cell {pub: in};
    var NC: first_order_rate_constant {pub: in};
    var NE: first_order_rate_constant {pub: in};
    var AA: molar {pub: in};
    var DA: cell {pub: in};
    var time: hour {pub: in};
    ode(SA, time) = -(DA*(KAS*AA/((AA+alpha_AS)*(1.0{dimensionless}+SA/kSS)*(1.0{dimensionless}+NC/kNS))+KGS*NE/((NE+alpha_NS)*(1.0{dimensionless}+SA/kSS)*(1.0{dimensionless}+NC/kNS)))*(kappa_S*SA));
  enddef;

  def comp SC as
    var SC: molar {pub: out};
    var KNS: molar_per_hour_cell {init: 1.14E-15};
    var alpha_GS: molar {init: 5.20E-12};
    var kappa_S: molar_per_hour_cell {pub: in};
    var alpha_NS: molar {pub: in};
    var kNS: molar {pub: in};
    var kSS: molar {pub: in};
    var KGS: molar_per_hour_cell {pub: in};
    var NC: first_order_rate_constant {pub: in};
    var NE: first_order_rate_constant {pub: in};
    var DC: cell {pub: in};
    var GtnC: molar {pub: in};
    var time: hour {pub: in};
    ode(SC, time) = -(DC*(KNS*NE/((NE+alpha_NS)*(1.0{dimensionless}+SC/kSS)*(1.0{dimensionless}+NC/kNS))+KGS*GtnC/((GtnC+alpha_GS)*(1.0{dimensionless}+SC/kSS)*(1.0{dimensionless}+NC/kNS)))*(kappa_S*SC));
  enddef;

  def comp HC as
    var HC: molar {pub: out};
    var KNH: molar_per_hour_cell {init: 7.59E-16};
    var KGH: molar_per_hour_cell {init: 7.77E-16};
    var kSH: molar {init: 9.0E-10};
    var alpha_GH: molar {init: 3.0E-10};
    var alpha_NH: molar {init: 3.25E-8};
    var kappa_H: first_order_rate_constant;
    var E: first_order_rate_constant {pub: in};
    var SC: molar {pub: in};
    var NE: first_order_rate_constant {pub: in};
    var NC: first_order_rate_constant {pub: in};
    var GtnC: molar {pub: in};
    var time: hour {pub: in};
    ode(HC, time) = -(E*(KNH*NE/((NE+alpha_NH)*(1.0{dimensionless}+SC/kSH))+KGH*GtnC/((GtnC+alpha_GH)*(1.0{dimensionless}+SC/kSH)))*(kappa_H*HC));
  enddef;

  def comp AC as
    var AC: molar {pub: out};
    var KNA: molar_per_hour_cell {init: 2.33E-11};
    var KHA: molar_per_hour_cell {init: 7.96E-10};
    var KGA: molar_per_hour_cell {init: 4.98E-11};
    var kSA: molar {init: 9.0E-10};
    var alpha_NA: molar {init: 5.0E-6};
    var alpha_GA: molar {init: 1.8E-10};
    var k_Fdmax: first_order_rate_constant;
    var P: cell {pub: in};
    var beta_A: first_order_rate_constant {pub: in};
    var BC: molar {pub: in};
    var hb: first_order_rate_constant {pub: in};
    var alpha_HA: molar {pub: in};
    var Fd: first_order_rate_constant {pub: in};
    var alpha_Fd: first_order_rate_constant {pub: in};
    var NC: first_order_rate_constant {pub: in};
    var SC: molar {pub: in};
    var HC: molar {pub: in};
    var GtnC: molar {pub: in};
    var time: hour {pub: in};
    ode(AC, time) = -(P*(KNA*NC/((NC+alpha_NA)*(1.0{dimensionless}+SC/kSA))+HC/(HC+alpha_HA)+KGA*GtnC/((GtnC+alpha_GA)*(1.0{dimensionless}+SC/kSA))+KHA*HC/((HC+alpha_HA)*(1.0{dimensionless}+SC/kSA)))*(hb*AC*BC+k_Fdmax*Fd/(Fd+alpha_Fd)*AC+beta_A*AC));
  enddef;

  def comp AA as
    var AA: molar {pub: out};
    var kappa_A: first_order_rate_constant;
    var beta_A: first_order_rate_constant {pub: in};
    var AC: molar {pub: in};
    var time: hour {pub: in};
    ode(AA, time) = beta_A*AC-kappa_A*AA;
  enddef;

  def comp BC as
    var BC: molar {pub: out};
    var k_BCmax: first_order_rate_constant;
    var beta_B: first_order_rate_constant;
    var alpha_NB: first_order_rate_constant {pub: in};
    var AC: molar {pub: in};
    var hb: first_order_rate_constant {pub: in};
    var NC: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(BC, time) = k_BCmax*NC/(NC+alpha_NB)-(hb*AC*BC+beta_B*BC);
  enddef;

  def comp BA as
    var BA: molar {pub: out};
    var k_BAmax: first_order_rate_constant;
    var kappa_B: first_order_rate_constant;
    var alpha_NB: first_order_rate_constant {pub: in};
    var AA: molar {pub: in};
    var hb: first_order_rate_constant {pub: in};
    var NC: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(BA, time) = k_BAmax*NC/(NC+alpha_NB)-(hb*AA*BA+kappa_B*BA);
  enddef;

  def comp NC as
    var NC: first_order_rate_constant {pub: out};
    var Nmax1: first_order_rate_constant;
    var kAN1: first_order_rate_constant;
    var kappa_NC: first_order_rate_constant;
    var Bas1: first_order_rate_constant;
    var kFd: first_order_rate_constant {pub: in};
    var Fd: first_order_rate_constant {pub: in};
    var AC: molar {pub: in};
    var time: hour {pub: in};
    ode(NC, time) = Nmax1*Fd/((Fd+kFd)*(1.0{dimensionless}+sqr(AC)/(sqr(AC)+sqr(kAN1))))-kappa_NC*NC+Bas1;
  enddef;

  def comp NE as
    var NE: first_order_rate_constant {pub: out};
    var Nmax2: first_order_rate_constant;
    var kAN2: first_order_rate_constant;
    var kappa_NE: first_order_rate_constant;
    var Bas2: first_order_rate_constant;
    var kFd: first_order_rate_constant {pub: in};
    var AC: molar {pub: in};
    var Fd: first_order_rate_constant {pub: in};
    var time: hour {pub: in};
    ode(NE, time) = Nmax2*Fd/((Fd+sqr(kFd))*(1.0{dimensionless}+sqr(AC)/(sqr(AC)+sqr(kAN2))))-kappa_NE*NE+Bas2;
  enddef;

  def comp model_parameters as
    var beta_G: first_order_rate_constant {pub: out, init: 1.5};
    var beta_A: first_order_rate_constant {pub: out, init: 2.72};
    var kFd: first_order_rate_constant {pub: out};
    var Fd: first_order_rate_constant {pub: out};
    var gamma_Fdmax: first_order_rate_constant {pub: out};
    var alpha_Fd: first_order_rate_constant {pub: out};
    var kappa_S: molar_per_hour_cell {pub: out};
    var alpha_NS: molar {pub: out, init: 6.28E-7};
    var alpha_NB: first_order_rate_constant {pub: out};
    var alpha_HA: first_order_rate_constant {pub: out, init: 2.0E-8};
    var kNS: molar {pub: out, init: 1.0E-9};
    var kSS: molar {pub: out, init: 9.0E-11};
    var KGS: molar_per_hour_cell {pub: out, init: 2.54E-18};
    var T_Asc: first_order_rate_constant {pub: out};
    var T_Csc: first_order_rate_constant {pub: out};
    var hb: dimensionless {pub: out};
  enddef;
  def map between Asc and environment for
    vars time and time;
  enddef;
  def map between Csc and environment for
    vars time and time;
  enddef;
  def map between G and environment for
    vars time and time;
  enddef;
  def map between DA and environment for
    vars time and time;
  enddef;
  def map between DC and environment for
    vars time and time;
  enddef;
  def map between P and environment for
    vars time and time;
  enddef;
  def map between E and environment for
    vars time and time;
  enddef;
  def map between GtnA and environment for
    vars time and time;
  enddef;
  def map between GtnC and environment for
    vars time and time;
  enddef;
  def map between SA and environment for
    vars time and time;
  enddef;
  def map between SC and environment for
    vars time and time;
  enddef;
  def map between HC and environment for
    vars time and time;
  enddef;
  def map between AC and environment for
    vars time and time;
  enddef;
  def map between AA and environment for
    vars time and time;
  enddef;
  def map between BC and environment for
    vars time and time;
  enddef;
  def map between BA and environment for
    vars time and time;
  enddef;
  def map between NC and environment for
    vars time and time;
  enddef;
  def map between NE and environment for
    vars time and time;
  enddef;
  def map between Asc and model_parameters for
    vars T_Asc and T_Asc;
  enddef;
  def map between Asc and feedback_mechanisms for
    vars pG and pG;
    vars pDA and pDA;
  enddef;
  def map between Csc and model_parameters for
    vars T_Csc and T_Csc;
  enddef;
  def map between Csc and GtnC for
    vars GtnC and GtnC;
  enddef;
  def map between Csc and feedback_mechanisms for
    vars pE and pE;
    vars pDC and pDC;
    vars pP and pP;
  enddef;
  def map between feedback_mechanisms and G for
    vars G and G;
    vars pG and pG;
  enddef;
  def map between feedback_mechanisms and DA for
    vars DA and DA;
    vars pDA and pDA;
  enddef;
  def map between feedback_mechanisms and DC for
    vars DC and DC;
    vars pDC and pDC;
  enddef;
  def map between feedback_mechanisms and P for
    vars P and P;
    vars pP and pP;
  enddef;
  def map between feedback_mechanisms and E for
    vars E and E;
    vars pE and pE;
  enddef;
  def map between G and model_parameters for
    vars T_Asc and T_Asc;
    vars Fd and Fd;
    vars alpha_Fd and alpha_Fd;
    vars alpha_HA and alpha_HA;
    vars gamma_Fdmax and gamma_Fdmax;
  enddef;
  def map between G and AC for
    vars AC and AC;
  enddef;
  def map between G and Asc for
    vars Asc and Asc;
  enddef;
  def map between DA and model_parameters for
    vars T_Asc and T_Asc;
    vars Fd and Fd;
    vars alpha_Fd and alpha_Fd;
    vars alpha_HA and alpha_HA;
    vars gamma_Fdmax and gamma_Fdmax;
  enddef;
  def map between DA and Asc for
    vars Asc and Asc;
  enddef;
  def map between DA and AC for
    vars AC and AC;
  enddef;
  def map between DC and model_parameters for
    vars T_Asc and T_Asc;
  enddef;
  def map between DC and Csc for
    vars Csc and Csc;
  enddef;
  def map between E and Csc for
    vars Csc and Csc;
  enddef;
  def map between E and GtnC for
    vars GtnC and GtnC;
  enddef;
  def map between E and model_parameters for
    vars T_Csc and T_Csc;
  enddef;
  def map between P and Csc for
    vars Csc and Csc;
  enddef;
  def map between P and model_parameters for
    vars T_Csc and T_Csc;
  enddef;
  def map between GtnA and G for
    vars G and G;
  enddef;
  def map between GtnA and NE for
    vars NE and NE;
  enddef;
  def map between GtnA and NC for
    vars NC and NC;
  enddef;
  def map between GtnA and model_parameters for
    vars Fd and Fd;
    vars alpha_Fd and alpha_Fd;
    vars beta_G and beta_G;
  enddef;
  def map between GtnA and SA for
    vars SA and SA;
  enddef;
  def map between GtnA and AC for
    vars AC and AC;
  enddef;
  def map between GtnC and GtnA for
    vars GtnA and GtnA;
  enddef;
  def map between GtnC and model_parameters for
    vars beta_G and beta_G;
  enddef;
  def map between SA and DA for
    vars DA and DA;
  enddef;
  def map between SA and AA for
    vars AA and AA;
  enddef;
  def map between SA and NE for
    vars NE and NE;
  enddef;
  def map between SA and NC for
    vars NC and NC;
  enddef;
  def map between SA and model_parameters for
    vars kappa_S and kappa_S;
    vars kSS and kSS;
    vars kNS and kNS;
    vars alpha_NS and alpha_NS;
    vars KGS and KGS;
  enddef;
  def map between SC and model_parameters for
    vars kappa_S and kappa_S;
    vars kSS and kSS;
    vars kNS and kNS;
    vars alpha_NS and alpha_NS;
    vars KGS and KGS;
  enddef;
  def map between SC and GtnC for
    vars GtnC and GtnC;
  enddef;
  def map between SC and NE for
    vars NE and NE;
  enddef;
  def map between SC and NC for
    vars NC and NC;
  enddef;
  def map between SC and DC for
    vars DC and DC;
  enddef;
  def map between HC and GtnC for
    vars GtnC and GtnC;
  enddef;
  def map between HC and SC for
    vars SC and SC;
  enddef;
  def map between HC and NE for
    vars NE and NE;
  enddef;
  def map between HC and NC for
    vars NC and NC;
  enddef;
  def map between HC and E for
    vars E and E;
  enddef;
  def map between AC and P for
    vars P and P;
  enddef;
  def map between AC and NC for
    vars NC and NC;
    vars AC and AC;
  enddef;
  def map between AC and HC for
    vars HC and HC;
  enddef;
  def map between AC and SC for
    vars SC and SC;
  enddef;
  def map between AC and model_parameters for
    vars alpha_HA and alpha_HA;
    vars hb and hb;
    vars Fd and Fd;
    vars alpha_Fd and alpha_Fd;
    vars beta_A and beta_A;
  enddef;
  def map between AC and GtnC for
    vars GtnC and GtnC;
  enddef;
  def map between AC and BC for
    vars BC and BC;
    vars AC and AC;
  enddef;
  def map between AA and AC for
    vars AC and AC;
  enddef;
  def map between AA and model_parameters for
    vars beta_A and beta_A;
  enddef;
  def map between BC and NC for
    vars NC and NC;
  enddef;
  def map between BC and model_parameters for
    vars hb and hb;
    vars alpha_NB and alpha_NB;
  enddef;
  def map between BA and NC for
    vars NC and NC;
  enddef;
  def map between BA and model_parameters for
    vars hb and hb;
    vars alpha_NB and alpha_NB;
  enddef;
  def map between BA and AA for
    vars AA and AA;
  enddef;
  def map between NC and model_parameters for
    vars Fd and Fd;
    vars kFd and kFd;
  enddef;
  def map between NE and AC for
    vars AC and AC;
  enddef;
  def map between NE and model_parameters for
    vars Fd and Fd;
    vars kFd and kFd;
  enddef;
enddef;
// Asc
// title: Asc
// alternative: antral stem cells
// Csc
// title: Csc
// alternative: corpus stem cells
// G
// title: G
// alternative: G cells
// DA
// title: DA
// alternative: antral D cells
// DC
// title: DC
// alternative: corpus D cells
// E
// title: E
// alternative: ECL cells
// P
// title: P
// alternative: parietal cells
// GtnA
// title: GtnA
// alternative: antral gastrin
// GtnC
// title: GtnC
// alternative: corpus gastrin
// SA
// title: SA
// alternative: antral somatostatin
// SC
// title: SC
// alternative: corpus somatostatin
// HC
// title: HC
// alternative: corpus histamine
// AC
// title: AC
// alternative: corpus gastric acid
// AA
// title: AA
// alternative: antral gastric acid
// BC
// title: BC
// alternative: corpus bicarbonate
// BA
// title: BA
// alternative: corpus bicarbonate
// NC
// title: NC
// alternative: central neural activity
// NE
// title: NE
// alternative: enteric neural activity
