// This CellML file was generated on 7/04/2010 at 4:00:39 at p.m. using:
//
// COR (0.9.31.1371)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// title: Common Phenotype of Resting Mouse EDL and SOL Muscles: SOL
// creator: Family Nunns; Given Geoffrey; Other Rogan; gnunns1@jhu.edu; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-04-07
// title: The Vinnakota et al. 2010 model of glycolytic flux in mouse EDL and SOL muscles.
// comment: This is the CellML description of the Vinnakota et al. 2010 mathematical model of glycolytic flux in mouse EDL and SOL muscles.; FN Geoffrey Nunns
// species: Mouse
// bio_entity: Myocyte
// reference: subject_type keyword; metabolism; pH regulation
// reference: Pubmed_id 20308252; Family Vinnakota; Given Kalyan; Family Rusk; Given Joshua; Family Palmer; Given Lauren; Family Shankland; Given Eric; Family Kushmeric; Given Martin; Other J; title Common Phenotype of Resting Mouse EDL and SOL Muscles: Equal ATPase and Glycolytic Flux During Transient Anoxia; W3CDTF 2010-03-22; title Journal of Physiology; volume Epub; first_page 1; last_page 56
def model vinnakota_rusk_palmer_shankland_kushmeric_2010_soleus as
  // Common Phenotype of Resting Mouse EDL and SOL Muscles: Equal ATPase and Glycolytic Flux During Transient Anoxia
  //
  // Geoffrey Nunns
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model describes the soleus muscle during resting state. It runs in PCEnv, COR and OpenCell to reproduce the original matlab, provided by the model authors. The units are consistent throughout.
  //
  // Model Structure
  //
  // ABSTRACT: Rates of ATPase and glycolysis are several times faster in actively contracting mouse extensor digitorum longus muscle (EDL) than soleus (SOL), but we find these rates are not distinguishable at rest. We use a transient anoxic perturbation of steady state energy balance to decrease PCr reversibly and to measure the rates of ATPase and of lactate production without muscle activation or contraction. The rate of glycolytic ATP synthesis is less than the ATPase rate, accounting for the continual PCr decrease during anoxia in both muscles. We fit a mathematical model validated with properties of enzymes and solutes measured in vitro and appropriate for the transient perturbation of these muscles to experimental data to test whether the model accounts for the results. Simulations showed equal rates of ATPase and lactate production in both muscles. ATPase controls glycolytic flux by feedback from its products. Adenylate kinase function is critical because rise in [AMP] is necessary to activate glycogen phosphorylase. ATPase is the primary source of H+ production. The sum of contributions of the thirteen reactions of the glycogenolytic and glycolytic network to total proton load is negligible. The stoichiometry of lactate and H+ production is near unity. These results identify a default state of energy metabolism for resting muscle in which there is no difference in the metabolic phenotype of EDL and SOL. Therefore additional control mechanisms, involving higher ATPase flux and [Ca++], must exist to explain for the well-known difference in glycolytic rates in fast-twitch and slow-twitch muscles in actively contracting muscle.
  //
  // The original paper reference is cited below:
  //
  // Common Phenotype of Resting Mouse EDL and SOL Muscles: Equal ATPase and Glycolytic Flux During Transient Anoxia, Kalyan Vinnakota, Joshua Rusk, Lauren Palmer, Eric Shankland and Martin J. Kushmeric, 2010, Journal of Physiology, Epub, 1-56. PubMed ID: 20308252 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=20308252&query_hl=1&itool=pubmed_docsum)
  def unit molar as
    unit mole;
    unit liter {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit molar_per_minute as
    unit molar;
    unit minute {expo: -1};
  enddef;
  def unit per_minute as
    unit minute {expo: -1};
  enddef;
  def unit liter_per_minute as
    unit liter;
    unit minute {expo: -1};
  enddef;
  def unit kilojoule_per_mole as
    unit joule {pref: kilo};
    unit mole {expo: -1};
  enddef;
  def unit mole_per_kilojoule as
    unit joule {pref: kilo, expo: -1};
    unit mole;
  enddef;
  def unit kilojoule_per_mole_per_kelvin as
    unit joule {pref: kilo};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit kilojoule_half_liter_per_3_half_mole as
    unit joule {pref: kilo};
    unit liter {expo: 0.5};
    unit mole {expo: -1.5};
  enddef;
  def unit half_molar as
    unit molar {expo: 0.5};
  enddef;
  def unit per_half_molar as
    unit molar {expo: -0.5};
  enddef;
  def unit per_molar as
    unit molar {expo: -1};
  enddef;
  def unit per_kelvin as
    unit kelvin {expo: -1};
  enddef;
  def unit per_kelvin2 as
    unit kelvin {expo: -2};
  enddef;

  def comp environment as
    var time: minute {pub: out};
    var pH_cy: dimensionless {pub: out};
    var pH_calc: dimensionless {pub: in};
    var CO2_in: molar {pub: out};
    var HCO3_in: molar {pub: out};
    var pH_in: dimensionless {pub: out};
    var MOPSt: molar {pub: out};
    var clamp: dimensionless {init: 1, pub: out};
    CO2_in = 0.05{dimensionless}*0.0425{molar}*(760{dimensionless}-23.8{dimensionless})*1e-3{dimensionless};
    HCO3_in = 30e-3{molar};
    pH_in = 6.157{dimensionless}+log(HCO3_in/CO2_in);
    MOPSt = 0{molar};
    pH_cy = pH_calc;
  enddef;

  def comp parameters as
    var Vfgly: molar_per_minute {pub: out};
    var fracA: dimensionless {pub: out};
    var KgpA_glyf: molar {pub: out};
    var KgpA_pi: molar {pub: out};
    var KgpA_igly: molar {pub: out};
    var KgpA_ipi: molar {pub: out};
    var KgpA_glyb: molar {pub: out};
    var KgpA_g1p: molar {pub: out};
    var KgpA_ig1p: molar {pub: out};
    var KgpB_pi: molar {pub: out};
    var KgpB_ipi: molar {pub: out};
    var KgpB_iglyf: molar {pub: out};
    var KgpB_g1p: molar {pub: out};
    var KgpB_ig1p: molar {pub: out};
    var KgpB_iglyb: molar {pub: out};
    var Kgp_amp: molar {pub: out};
    var nH: dimensionless {pub: out};
    var Vffpglm: molar_per_minute {pub: out};
    var Kpglm_g1p: molar {pub: out};
    var Kpglm_g6p: molar {pub: out};
    var Vbbpgi: molar_per_minute {pub: out};
    var Kpgi_g6p: molar {pub: out};
    var Kpgi_f6p: molar {pub: out};
    var Vffpfk: molar_per_minute {pub: out};
    var Kpfk_f6p: molar {pub: out};
    var Kpfk_f6pT: molar {pub: out};
    var Kpfk_atp: molar {pub: out};
    var Kpfk_atpT: molar {pub: out};
    var Kpfk_fbp: molar {pub: out};
    var Kpfk_fbpT: molar {pub: out};
    var Kpfk_adp: molar {pub: out};
    var Kpfk_adpT: molar {pub: out};
    var Kpfki: molar {pub: out};
    var Kmpfk: molar {pub: out};
    var d: dimensionless {pub: out};
    var e_: dimensionless {pub: out};
    var Lo: dimensionless {pub: out};
    var Vffald: molar_per_minute {pub: out};
    var Kald_fbp: molar {pub: out};
    var Kald_dhap: molar {pub: out};
    var Kald_gap: molar {pub: out};
    var Vfftpi: molar_per_minute {pub: out};
    var Ktpi_gap: molar {pub: out};
    var Ktpi_dhap: molar {pub: out};
    var Vbbg3pdh: molar_per_minute {pub: out};
    var Kg3pdh_g3p: molar {pub: out};
    var Kg3pdh_nad: molar {pub: out};
    var Kg3pdh_dhap: molar {pub: out};
    var Kg3pdh_nadh: molar {pub: out};
    var Vffgad: molar_per_minute {pub: out};
    var Kgapdh_gap: molar {pub: out};
    var Kgapdh_nad: molar {pub: out};
    var Kgapdh_pi: molar {pub: out};
    var Kgapdh_bpg: molar {pub: out};
    var Kgapdh_nadh: molar {pub: out};
    var Vbbpgk: molar_per_minute {pub: out};
    var Kpgk_bpg: molar {pub: out};
    var Kpgk_adp: molar {pub: out};
    var Kpgk_3pg: molar {pub: out};
    var Kpgk_atp: molar {pub: out};
    var Vffpgm: molar_per_minute {pub: out};
    var Kpgm_3pg: molar {pub: out};
    var Kpgm_2pg: molar {pub: out};
    var Vffen: molar_per_minute {pub: out};
    var Ken_2pg: molar {pub: out};
    var Ken_pep: molar {pub: out};
    var Vffpk: molar_per_minute {pub: out};
    var Kpk_pep: molar {pub: out};
    var Kpk_adp: molar {pub: out};
    var Kpk_pyr: molar {pub: out};
    var Kpk_atp: molar {pub: out};
    var Vffldh: molar_per_minute {pub: out};
    var Kldh_pyr: molar {pub: out};
    var Kldh_nadh: molar {pub: out};
    var Kldh_lac: molar {pub: out};
    var Kldh_nad: molar {pub: out};
    var VforCK: molar_per_minute {pub: out};
    var Kck_pcr: molar {pub: out};
    var Kck_iatp: molar {pub: out};
    var Kck_iadp: molar {pub: out};
    var Kck_ipcr: molar {pub: out};
    var Kck_cr: molar {pub: out};
    var Kck_Iadp: molar {pub: out};
    var Kck_Ipcr: molar {pub: out};
    var Kck_Icr: molar {pub: out};
    var Kck_Iatp: molar {pub: out};
    var Kck_Ii: molar {pub: out};
    var Vfadk: molar_per_minute {pub: out};
    var Kadk_amp: molar {pub: out};
    var Kadk_atp: molar {pub: out};
    var Kadk_adp: molar {pub: out};
    var kut: per_minute {pub: out};
    var VmaxOxPhos: molar_per_minute {pub: out};
    var Kmadp: molar {pub: out};
    var nnHH: dimensionless {pub: out};
    var Vmax_MCT: molar_per_minute {pub: out};
    var Klac1: molar {pub: out};
    var pKmct1: dimensionless {pub: out};
    var PSVCO2: per_minute {pub: out};
    var X_CA: dimensionless {pub: out};
    var kf_hydrCO2: per_minute {pub: out};
    var Keq_CA: dimensionless {pub: out};
    var kb_hydrCO2: per_minute {pub: out};
    var Flow: liter_per_minute {pub: out};
    var V_cell: liter {pub: out};
    var V_ec: liter {pub: out};
    var bufcapfixed: molar {pub: out};
    Vfgly = 0.0037{molar_per_minute};
    fracA = 1e-2{dimensionless};
    KgpA_glyf = 1.7e-3{molar};
    KgpA_pi = 4e-3{molar};
    KgpA_igly = 2e-3{molar};
    KgpA_ipi = 4.7e-3{molar};
    KgpA_glyb = 1.5e-4{molar};
    KgpA_g1p = 2.7e-3{molar};
    KgpA_ig1p = 1.01e-2{molar};
    KgpB_pi = 2e-4{molar};
    KgpB_ipi = 4.6e-3{molar};
    KgpB_iglyf = 1.5e-2{molar};
    KgpB_g1p = 1.5e-3{molar};
    KgpB_ig1p = 7.4e-3{molar};
    KgpB_iglyb = 4.4e-3{molar};
    Kgp_amp = 6.46203e-6{molar};
    nH = 1.6159{dimensionless};
    Vffpglm = 0.0052{molar_per_minute};
    Kpglm_g1p = 6.3e-5{molar};
    Kpglm_g6p = 3e-5{molar};
    Vbbpgi = 0.3833{molar_per_minute};
    Kpgi_g6p = 4.8e-4{molar};
    Kpgi_f6p = 1.19e-4{molar};
    Vffpfk = 0.0037{molar_per_minute};
    Kpfk_f6p = 1.8e-4{molar};
    Kpfk_f6pT = 2e-2{molar};
    Kpfk_atp = 8e-5{molar};
    Kpfk_atpT = 2.5e-4{molar};
    Kpfk_fbp = 4.02e-3{molar};
    Kpfk_fbpT = 4.02e-3{molar};
    Kpfk_adp = 2.7e-3{molar};
    Kpfk_adpT = 2.7e-3{molar};
    Kpfki = 8.7e-4{dimensionless}*10{molar};
    Kmpfk = 6e-5{molar};
    d = 1e-2{dimensionless};
    e_ = 1e-2{dimensionless};
    Lo = 13{dimensionless};
    Vffald = 0.012{molar_per_minute};
    Kald_fbp = 5e-5{molar};
    Kald_dhap = 2e-3{molar};
    Kald_gap = 1e-3{molar};
    Vfftpi = 0.1406{molar_per_minute};
    Ktpi_gap = 3.2e-4{molar};
    Ktpi_dhap = 6.1e-4{molar};
    Vbbg3pdh = 0.0557{molar_per_minute};
    Kg3pdh_g3p = 1.8e-4{molar};
    Kg3pdh_nad = 1.2e-5{molar};
    Kg3pdh_dhap = 2.2e-4{molar};
    Kg3pdh_nadh = 8e-6{molar};
    Vffgad = 0.0765{molar_per_minute};
    Kgapdh_gap = 2.5e-6{molar};
    Kgapdh_nad = 9e-5{molar};
    Kgapdh_pi = 2.9e-4{molar};
    Kgapdh_bpg = 8e-7{molar};
    Kgapdh_nadh = 3.3e-6{molar};
    Vbbpgk = 0.0087{molar_per_minute};
    Kpgk_bpg = 2e-3{molar};
    Kpgk_adp = 8e-6{molar};
    Kpgk_3pg = 1.2e-3{molar};
    Kpgk_atp = 3.5e-4{molar};
    Vffpgm = 0.0839{molar_per_minute};
    Kpgm_3pg = 2e-4{molar};
    Kpgm_2pg = 1.4e-5{molar};
    Vffen = 0.7966{molar_per_minute};
    Ken_2pg = 1e-4{molar};
    Ken_pep = 3.7e-4{molar};
    Vffpk = 0.0408{molar_per_minute};
    Kpk_pep = 8e-5{molar};
    Kpk_adp = 3e-4{molar};
    Kpk_pyr = 7.05e-3{molar};
    Kpk_atp = 1.13e-3{molar};
    Vffldh = 0.0956{molar_per_minute};
    Kldh_pyr = 3.35e-4{molar};
    Kldh_nadh = 2e-6{molar};
    Kldh_lac = 1.7e-2{molar};
    Kldh_nad = 8.49e-4{molar};
    VforCK = 8.8215{molar_per_minute};
    Kck_pcr = 1.11e-3{molar};
    Kck_iatp = 3.5e-3{molar};
    Kck_iadp = 1.35e-4{molar};
    Kck_ipcr = 3.9e-3{molar};
    Kck_cr = 3.8e-3{molar};
    Kck_Iadp = 0.015e-3{molar};
    Kck_Ipcr = 3.9e-3{molar};
    Kck_Icr = 58e-3{molar};
    Kck_Iatp = 4.346e-3{molar};
    Kck_Ii = 1e-3{molar};
    Vfadk = 2.0299{molar_per_minute};
    Kadk_amp = 3.2e-4{molar};
    Kadk_atp = 2.7e-4{molar};
    Kadk_adp = 3.5e-4{molar};
    kut = 0.124547251111437{per_minute};
    VmaxOxPhos = 0.0037844{molar_per_minute};
    Kmadp = 0.0000419392{molar};
    nnHH = 2.217962{dimensionless};
    Vmax_MCT = 0.0007114938{molar_per_minute};
    Klac1 = 4e-3{molar};
    pKmct1 = 8.89{dimensionless};
    PSVCO2 = 2.3084{per_minute};
    X_CA = 740{dimensionless};
    kf_hydrCO2 = 0.0469{per_minute}*60{dimensionless};
    Keq_CA = pow(10{dimensionless}, -6.157{dimensionless});
    kb_hydrCO2 = kf_hydrCO2/Keq_CA;
    Flow = 4e-3{liter_per_minute};
    V_cell = 55e-3{liter}*0.67{dimensionless}*1e-3{dimensionless};
    V_ec = 0.149e-3{liter}-55e-3{dimensionless}/1.06{dimensionless}*1e-3{liter};
    bufcapfixed = 0.0041388{molar};
  enddef;

  def comp equilibrium_constants as
    var T: kelvin {pub: out};
    var I: molar {pub: out};
    var k: molar {pub: out};
    var c0: molar {pub: out};
    var R: kilojoule_per_mole_per_kelvin {pub: out};
    var B: per_half_molar {pub: out};
    var I1: molar {pub: out};
    var alphadebye: per_half_molar {pub: out};
    var IcorrpKa: dimensionless {pub: out};
    var RTalpha: kilojoule_half_liter_per_3_half_mole {pub: out};
    var IcorrdeltaGpof: kilojoule_per_mole {pub: out};
    var pKa1_Pi: dimensionless {pub: out};
    var pKamg_Pi: dimensionless {pub: out};
    var pKak_Pi: dimensionless {pub: out};
    var P_Pi: dimensionless {pub: out};
    var HPi2: dimensionless {pub: out};
    var H2Pi1: dimensionless {pub: out};
    var kPi: dimensionless {pub: out};
    var mgPi: dimensionless {pub: out};
    var Navg_Pi: dimensionless {pub: out};
    var dNavgPidH: per_molar {pub: out};
    var NH_HPi2: dimensionless {pub: out};
    var deltaGof_HPi2: kilojoule_per_mole {pub: out};
    var deltaGpof_HPi2: kilojoule_per_mole {pub: out};
    var pKa1_ATP: dimensionless {pub: out};
    var pKamg_ATP: dimensionless {pub: out};
    var pKak_ATP: dimensionless {pub: out};
    var P_ATP: dimensionless {pub: out};
    var ATP4: dimensionless {pub: out};
    var HATP3: dimensionless {pub: out};
    var mgATP2: dimensionless {pub: out};
    var kATP: dimensionless {pub: out};
    var Navg_ATP: dimensionless {pub: out};
    var dNavgATPdH: per_molar {pub: out};
    var NH_ATP4: dimensionless {pub: out};
    var deltaGof_ATP4: kilojoule_per_mole {pub: out};
    var deltaGpof_ATP4: kilojoule_per_mole {pub: out};
    var pKak_ADP: dimensionless {pub: out};
    var pKa1_ADP: dimensionless {pub: out};
    var pKamg_ADP: dimensionless {pub: out};
    var P_ADP: dimensionless {pub: out};
    var ADP3: dimensionless {pub: out};
    var HADP2: dimensionless {pub: out};
    var mgADP: dimensionless {pub: out};
    var kADP: dimensionless {pub: out};
    var Navg_ADP: dimensionless {pub: out};
    var dNavgADPdH: per_molar {pub: out};
    var NH_ADP3: dimensionless {pub: out};
    var deltaGof_ADP3: kilojoule_per_mole {pub: out};
    var deltaGpof_ADP3: kilojoule_per_mole {pub: out};
    var pKa1_AMP: dimensionless {pub: out};
    var pKamg_AMP: dimensionless {pub: out};
    var P_AMP: dimensionless {pub: out};
    var AMP2: dimensionless {pub: out};
    var HAMP1: dimensionless {pub: out};
    var mgAMP: dimensionless {pub: out};
    var Navg_AMP: dimensionless {pub: out};
    var dNavgAMPdH: per_molar {pub: out};
    var NH_AMP2: dimensionless {pub: out};
    var deltaGof_AMP2: kilojoule_per_mole {pub: out};
    var deltaGpof_AMP2: kilojoule_per_mole {pub: out};
    var pKak_PCR: dimensionless {pub: out};
    var pKa1_PCR: dimensionless {pub: out};
    var pKamg_PCR: dimensionless {pub: out};
    var P_PCR: dimensionless {pub: out};
    var HPCR: dimensionless {pub: out};
    var H2PCR: dimensionless {pub: out};
    var kPCR: dimensionless {pub: out};
    var mgPCR: dimensionless {pub: out};
    var Navg_PCR: dimensionless {pub: out};
    var dNavgPCRdH: per_molar {pub: out};
    var NH_HPCR: dimensionless {pub: out};
    var pKa1_CR: dimensionless {pub: out};
    var P_CR: dimensionless {pub: out};
    var HCR: dimensionless {pub: out};
    var H2CR: dimensionless {pub: out};
    var Navg_CR: dimensionless {pub: out};
    var dNavgCRdH: per_molar {pub: out};
    var NH_HCR: dimensionless {pub: out};
    var pKa1_G1P: dimensionless {pub: out};
    var pKamg_G1P: dimensionless {pub: out};
    var P_G1P: dimensionless {pub: out};
    var UG1P: dimensionless {pub: out};
    var HG1P: dimensionless {pub: out};
    var mgG1P: dimensionless {pub: out};
    var Navg_G1P: dimensionless {pub: out};
    var dNavgG1PdH: per_molar {pub: out};
    var NH_UG1P: dimensionless {pub: out};
    var deltaGof_UG1P: kilojoule_per_mole {pub: out};
    var deltaGpof_UG1P: kilojoule_per_mole {pub: out};
    var pKa1_G6P: dimensionless {pub: out};
    var P_G6P: dimensionless {pub: out};
    var UG6P: dimensionless {pub: out};
    var HG6P: dimensionless {pub: out};
    var Navg_G6P: dimensionless {pub: out};
    var dNavgG6PdH: per_molar {pub: out};
    var dNavgG6Pdmg: per_molar {pub: out};
    var NH_UG6P: dimensionless {pub: out};
    var deltaGof_UG6P: kilojoule_per_mole {pub: out};
    var deltaGpof_UG6P: kilojoule_per_mole {pub: out};
    var pKa1_F6P: dimensionless {pub: out};
    var P_F6P: dimensionless {pub: out};
    var UF6P: dimensionless {pub: out};
    var HF6P: dimensionless {pub: out};
    var Navg_F6P: dimensionless {pub: out};
    var dNavgF6PdH: per_molar {pub: out};
    var NH_UF6P: dimensionless {pub: out};
    var deltaGof_UF6P: kilojoule_per_mole {pub: out};
    var deltaGpof_UF6P: kilojoule_per_mole {pub: out};
    var pKa1_FDP: dimensionless {pub: out};
    var pKamg_FDP: dimensionless {pub: out};
    var P_FDP: dimensionless {pub: out};
    var UFDP: dimensionless {pub: out};
    var HFDP: dimensionless {pub: out};
    var mgFDP: dimensionless {pub: out};
    var Navg_FDP: dimensionless {pub: out};
    var dNavgFDPdH: per_molar {pub: out};
    var NH_UFDP: dimensionless {pub: out};
    var deltaGof_UFDP: kilojoule_per_mole {pub: out};
    var deltaGpof_UFDP: kilojoule_per_mole {pub: out};
    var pKa1_GAP: dimensionless {pub: out};
    var P_GAP: dimensionless {pub: out};
    var UGAP: dimensionless {pub: out};
    var HGAP: dimensionless {pub: out};
    var Navg_GAP: dimensionless {pub: out};
    var dNavgGAPdH: per_molar {pub: out};
    var dNavgGAPdmg: per_molar {pub: out};
    var NH_UGAP: dimensionless {pub: out};
    var deltaGof_UGAP: kilojoule_per_mole {pub: out};
    var deltaGpof_UGAP: kilojoule_per_mole {pub: out};
    var pKamg_G3P: dimensionless {pub: out};
    var pKa1_G3P: dimensionless {pub: out};
    var P_G3P: dimensionless {pub: out};
    var UG3P: dimensionless {pub: out};
    var HG3P: dimensionless {pub: out};
    var mgG3P: dimensionless {pub: out};
    var Navg_G3P: dimensionless {pub: out};
    var dNavgG3PdH: per_molar {pub: out};
    var NH_UG3P: dimensionless {pub: out};
    var deltaGof_UG3P: kilojoule_per_mole {pub: out};
    var deltaGpof_UG3P: kilojoule_per_mole {pub: out};
    var pKa1_DHAP: dimensionless {pub: out};
    var pKamg_DHAP: dimensionless {pub: out};
    var P_DHAP: dimensionless {pub: out};
    var UDHAP: dimensionless {pub: out};
    var HDHAP: dimensionless {pub: out};
    var mgDHAP: dimensionless {pub: out};
    var Navg_DHAP: dimensionless {pub: out};
    var dNavgDHAPdH: per_molar {pub: out};
    var NH_UDHAP: dimensionless {pub: out};
    var deltaGof_UDHAP: kilojoule_per_mole {pub: out};
    var deltaGpof_UDHAP: kilojoule_per_mole {pub: out};
    var pKa1_13DPG: dimensionless {pub: out};
    var P_13DPG: dimensionless {pub: out};
    var U13DPG: dimensionless {pub: out};
    var H13DPG: dimensionless {pub: out};
    var Navg_13DPG: dimensionless {pub: out};
    var dNavg13DPGdH: per_molar {pub: out};
    var NH_U13DPG: dimensionless {pub: out};
    var deltaGof_U13DPG: kilojoule_per_mole {pub: out};
    var deltaGpof_U13DPG: kilojoule_per_mole {pub: out};
    var pKa1_3PG: dimensionless {pub: out};
    var P_3PG: dimensionless {pub: out};
    var U3PG: dimensionless {pub: out};
    var H3PG: dimensionless {pub: out};
    var Navg_3PG: dimensionless {pub: out};
    var dNavg3PGdH: per_molar {pub: out};
    var NH_U3PG: dimensionless {pub: out};
    var deltaGof_U3PG: kilojoule_per_mole {pub: out};
    var deltaGpof_U3PG: kilojoule_per_mole {pub: out};
    var pKa1_2PG: dimensionless {pub: out};
    var pKamg_2PG: dimensionless {pub: out};
    var pKak_2PG: dimensionless {pub: out};
    var P_2PG: dimensionless {pub: out};
    var U2PG: dimensionless {pub: out};
    var H2PG: dimensionless {pub: out};
    var mg2PG: dimensionless {pub: out};
    var k2PG: dimensionless {pub: out};
    var Navg_2PG: dimensionless {pub: out};
    var dNavg2PGdH: per_molar {pub: out};
    var NH_U2PG: dimensionless {pub: out};
    var deltaGof_U2PG: kilojoule_per_mole {pub: out};
    var deltaGpof_U2PG: kilojoule_per_mole {pub: out};
    var pKa1_PEP: dimensionless {pub: out};
    var pKamg_PEP: dimensionless {pub: out};
    var pKak_PEP: dimensionless {pub: out};
    var P_PEP: dimensionless {pub: out};
    var UPEP: dimensionless {pub: out};
    var HPEP: dimensionless {pub: out};
    var kPEP: dimensionless {pub: out};
    var mgPEP: dimensionless {pub: out};
    var Navg_PEP: dimensionless {pub: out};
    var dNavgPEPdH: per_molar {pub: out};
    var NH_UPEP: dimensionless {pub: out};
    var deltaGof_UPEP: kilojoule_per_mole {pub: out};
    var deltaGpof_UPEP: kilojoule_per_mole {pub: out};
    var pKa1_PYR: dimensionless {pub: out};
    var P_PYR: dimensionless {pub: out};
    var UPYR: dimensionless {pub: out};
    var HPYR: dimensionless {pub: out};
    var Navg_PYR: dimensionless {pub: out};
    var dNavgPYRdH: per_molar {pub: out};
    var dNavgPYRdmg: per_molar {pub: out};
    var NH_UPYR: dimensionless {pub: out};
    var deltaGof_UPYR: kilojoule_per_mole {pub: out};
    var deltaGpof_UPYR: kilojoule_per_mole {pub: out};
    var pKamg_LAC: dimensionless {pub: out};
    var pKa1_LAC: dimensionless {pub: out};
    var P_LAC: dimensionless {pub: out};
    var ULAC: dimensionless {pub: out};
    var HLAC: dimensionless {pub: out};
    var mgLAC: dimensionless {pub: out};
    var Navg_LAC: dimensionless {pub: out};
    var dNavgLACdH: per_molar {pub: out};
    var dmgLACdmg: per_molar {pub: out};
    var dmgLACdpH: dimensionless {pub: out};
    var NH_ULAC: dimensionless {pub: out};
    var deltaGof_ULAC: kilojoule_per_mole {pub: out};
    var deltaGpof_ULAC: kilojoule_per_mole {pub: out};
    var dNH_GLY: dimensionless {pub: out};
    var deltaGpo_GLY: kilojoule_per_mole {pub: out};
    var NH_NAD: dimensionless {pub: out};
    var deltaGof_NAD: kilojoule_per_mole {pub: out};
    var deltaGpof_NAD: kilojoule_per_mole {pub: out};
    var NH_NADH: dimensionless {pub: out};
    var deltaGof_NADH: kilojoule_per_mole {pub: out};
    var deltaGpof_NADH: kilojoule_per_mole {pub: out};
    var NH_H2O: dimensionless {pub: out};
    var deltaGof_H2O: kilojoule_per_mole {pub: out};
    var deltaGpof_H2O: kilojoule_per_mole {pub: out};
    var NH_H: dimensionless {pub: out};
    var deltaGof_H: kilojoule_per_mole {pub: out};
    var deltaGpof_H: kilojoule_per_mole {pub: out};
    var deltaH_CK: dimensionless {pub: out};
    var slopeint_1: kelvin {pub: out};
    var slopeint_2: dimensionless {pub: out};
    var Kref_CKT: dimensionless {pub: out};
    var I25: molar {pub: out};
    var alphadebye1: dimensionless {pub: out};
    var IcorrneglnKrefCK: dimensionless {pub: out};
    var neglnKrefCK_Iexp: dimensionless {pub: out};
    var Kref_CK: dimensionless {pub: out};
    var deltaGpo_CK: kilojoule_per_mole {pub: out};
    var Kapp_CK: dimensionless {pub: out};
    var deltaH_ADK: dimensionless {pub: out};
    var deltaGpo_ADK: kilojoule_per_mole {pub: out};
    var Kapp_ADK: dimensionless {pub: out};
    var deltaH_GP: dimensionless {pub: out};
    var deltaGpo_GP: kilojoule_per_mole {pub: out};
    var Kapp_GP: dimensionless {pub: out};
    var deltaH_PGLM: dimensionless {pub: out};
    var deltaGpo_PGLM: kilojoule_per_mole {pub: out};
    var Kapp_PGLM: dimensionless {pub: out};
    var deltaH_PGI: dimensionless {pub: out};
    var deltaGpo_PGI: kilojoule_per_mole {pub: out};
    var Kapp_PGI: dimensionless {pub: out};
    var deltaH_PFK: dimensionless {pub: out};
    var deltaGpo_PFK: kilojoule_per_mole {pub: out};
    var Kapp_PFK: dimensionless {pub: out};
    var deltaH_ALD: dimensionless {pub: out};
    var deltaGpo_ALD: kilojoule_per_mole {pub: out};
    var Kapp_ALD: dimensionless {pub: out};
    var deltaH_TPI: dimensionless {pub: out};
    var deltaGpo_TPI: kilojoule_per_mole {pub: out};
    var Kapp_TPI: dimensionless {pub: out};
    var deltaH_GAPDH: dimensionless {pub: out};
    var deltaGpo_GAPDH: kilojoule_per_mole {pub: out};
    var Kapp_GAPDH: dimensionless {pub: out};
    var deltaH_G3PDH: dimensionless {pub: out};
    var deltaGpo_G3PDH: kilojoule_per_mole {pub: out};
    var Kapp_G3PDH: dimensionless {pub: out};
    var deltaH_PGK: dimensionless {pub: out};
    var deltaGpo_PGK: kilojoule_per_mole {pub: out};
    var Kapp_PGK: dimensionless {pub: out};
    var deltaH_PGM: dimensionless {pub: out};
    var deltaGpo_PGM: kilojoule_per_mole {pub: out};
    var Kapp_PGM: dimensionless {pub: out};
    var deltaH_ENOL: dimensionless {pub: out};
    var deltaGpo_ENOL: kilojoule_per_mole {pub: out};
    var Kapp_ENOL: dimensionless {pub: out};
    var deltaH_PK: dimensionless {pub: out};
    var deltaGpo_PK: kilojoule_per_mole {pub: out};
    var Kapp_PK: dimensionless {pub: out};
    var deltaH_LDH: dimensionless {pub: out};
    var deltaGpo_LDH: kilojoule_per_mole {pub: out};
    var Kapp_LDH: dimensionless {pub: out};
    var deltaH_ATPase: dimensionless {pub: out};
    var deltaGpo_ATPase: kilojoule_per_mole {pub: out};
    var Kapp_ATPase: dimensionless {pub: out};
    var mg: molar {pub: in};
    var pH_cy: dimensionless {pub: in};
    T = 298.15{kelvin};
    I = 0.17{molar};
    k = 0.14{molar};
    c0 = 1{molar};
    R = 8.314e-3{kilojoule_per_mole_per_kelvin};
    B = 1.6{per_half_molar};
    I1 = 0.1{molar};
    alphadebye = 1.17582{per_half_molar};
    IcorrpKa = alphadebye*(sqrt(I1)/(1{dimensionless}+B*sqrt(I1))-sqrt(I)/(1{dimensionless}+B*sqrt(I)))/ln(10{dimensionless});
    RTalpha = 2.91482{kilojoule_half_liter_per_3_half_mole};
    IcorrdeltaGpof = RTalpha*sqrt(I)/(1{dimensionless}+B*sqrt(I));
    pKa1_Pi = 6.75{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    pKamg_Pi = 1.65{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}));
    pKak_Pi = 0.5{dimensionless};
    P_Pi = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_Pi)+mg/c0*pow(10{dimensionless}, pKamg_Pi)+k/c0*pow(10{dimensionless}, pKak_Pi);
    HPi2 = 1{dimensionless}/P_Pi;
    H2Pi1 = pow(10{dimensionless}, -pH_cy+pKa1_Pi)*HPi2;
    kPi = k/c0*pow(10{dimensionless}, pKak_Pi)*HPi2;
    mgPi = mg/c0*pow(10{dimensionless}, pKamg_Pi)*HPi2;
    Navg_Pi = H2Pi1;
    dNavgPidH = pow(10{dimensionless}, pKa1_Pi)*P_Pi*(1{dimensionless}-H2Pi1)/(c0*sqr(P_Pi));
    NH_HPi2 = 1{dimensionless};
    deltaGof_HPi2 = -1096.1{kilojoule_per_mole};
    deltaGpof_HPi2 = deltaGof_HPi2+NH_HPi2*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_HPi2);
    pKa1_ATP = 6.48{dimensionless}+IcorrpKa*(sqr(4{dimensionless})+sqr(1{dimensionless})-sqr(3{dimensionless}));
    pKamg_ATP = 4.19{dimensionless}+IcorrpKa*(sqr(4{dimensionless})+sqr(2{dimensionless})-sqr(2{dimensionless}));
    pKak_ATP = 1.17{dimensionless}+IcorrpKa*(sqr(4{dimensionless})+sqr(1{dimensionless})-sqr(3{dimensionless}));
    P_ATP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_ATP)+mg/c0*pow(10{dimensionless}, pKamg_ATP)+k/c0*pow(10{dimensionless}, pKak_ATP);
    ATP4 = 1{dimensionless}/P_ATP;
    HATP3 = pow(10{dimensionless}, -pH_cy+pKa1_ATP)*ATP4;
    mgATP2 = mg/c0*pow(10{dimensionless}, pKamg_ATP)*ATP4;
    kATP = k/c0*pow(10{dimensionless}, pKak_ATP)*ATP4;
    Navg_ATP = HATP3;
    dNavgATPdH = pow(10{dimensionless}, pKa1_ATP)*P_ATP*(1{dimensionless}-HATP3)/(c0*sqr(P_ATP));
    NH_ATP4 = 12{dimensionless};
    deltaGof_ATP4 = -2768.1{kilojoule_per_mole};
    deltaGpof_ATP4 = deltaGof_ATP4+NH_ATP4*R*T*ln(10{dimensionless})*pH_cy-IcorrdeltaGpof*(16{dimensionless}-NH_ATP4);
    pKak_ADP = 1{dimensionless};
    pKa1_ADP = 6.38{dimensionless}+IcorrpKa*(sqr(3{dimensionless})+sqr(1{dimensionless})-sqr(2{dimensionless}));
    pKamg_ADP = 3.25{dimensionless}+IcorrpKa*(sqr(3{dimensionless})+sqr(2{dimensionless})-sqr(1{dimensionless}));
    P_ADP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_ADP)+mg/c0*pow(10{dimensionless}, pKamg_ADP)+k/c0*pow(10{dimensionless}, pKak_ADP);
    ADP3 = 1{dimensionless}/P_ADP;
    HADP2 = pow(10{dimensionless}, -pH_cy+pKa1_ADP)*ADP3;
    mgADP = ADP3*mg/c0*pow(10{dimensionless}, pKamg_ADP);
    kADP = ADP3*k/c0*pow(10{dimensionless}, pKak_ADP);
    Navg_ADP = HADP2;
    dNavgADPdH = pow(10{dimensionless}, pKa1_ADP)*P_ADP*(1{dimensionless}-HADP2)/(c0*sqr(P_ADP));
    NH_ADP3 = 12{dimensionless};
    deltaGof_ADP3 = -1906.13{kilojoule_per_mole};
    deltaGpof_ADP3 = deltaGof_ADP3+NH_ADP3*R*T*ln(10{dimensionless})*pH_cy-IcorrdeltaGpof*(9{dimensionless}-NH_ADP3);
    pKa1_AMP = 6.29{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    pKamg_AMP = 1.92{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}));
    P_AMP = 1{dimensionless}+pow(10{dimensionless}, pKa1_AMP-pH_cy)+mg/c0*pow(10{dimensionless}, pKamg_AMP);
    AMP2 = 1{dimensionless}/P_AMP;
    HAMP1 = AMP2*pow(10{dimensionless}, pKa1_AMP-pH_cy);
    mgAMP = mg/c0*pow(10{dimensionless}, pKamg_AMP)*AMP2;
    Navg_AMP = HAMP1;
    dNavgAMPdH = pow(10{dimensionless}, pKa1_AMP)*(P_AMP-pow(10{dimensionless}, -pH_cy+pKa1_AMP))/(c0*sqr(P_AMP));
    NH_AMP2 = 12{dimensionless};
    deltaGof_AMP2 = -1040.45{kilojoule_per_mole};
    deltaGpof_AMP2 = deltaGof_AMP2+NH_AMP2*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_AMP2);
    pKak_PCR = 0.31{dimensionless};
    pKa1_PCR = 4.5{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    pKamg_PCR = 1.6{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}));
    P_PCR = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_PCR)+mg/c0*pow(10{dimensionless}, pKamg_PCR)+k/c0*pow(10{dimensionless}, pKak_PCR);
    HPCR = 1{dimensionless}/P_PCR;
    H2PCR = pow(10{dimensionless}, -pH_cy+pKa1_PCR)*HPCR;
    kPCR = k/c0*pow(10{dimensionless}, pKak_PCR)*HPCR;
    mgPCR = mg/c0*pow(10{dimensionless}, pKamg_PCR)*HPCR;
    Navg_PCR = H2PCR;
    dNavgPCRdH = pow(10{dimensionless}, pKa1_PCR)*(P_PCR-pow(10{dimensionless}, -pH_cy+pKa1_PCR))/(c0*sqr(P_PCR));
    NH_HPCR = 8{dimensionless};
    pKa1_CR = 2.3{dimensionless};
    P_CR = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_CR);
    HCR = 1{dimensionless}/P_CR;
    H2CR = HCR*pow(10{dimensionless}, -pH_cy+pKa1_CR);
    Navg_CR = 0{dimensionless}*HCR+1{dimensionless}*H2CR;
    dNavgCRdH = pow(10{dimensionless}, pKa1_CR)*(P_CR-pow(10{dimensionless}, -pH_cy+pKa1_CR))/(c0*sqr(P_CR));
    NH_HCR = 9{dimensionless};
    pKa1_G1P = 6.09{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    pKamg_G1P = 2.48{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(2{dimensionless})-sqr(0{dimensionless}));
    P_G1P = 1{dimensionless}+pow(10{dimensionless}, -pH_cy)*pow(10{dimensionless}, pKa1_G1P)+mg/c0*pow(10{dimensionless}, pKamg_G1P);
    UG1P = 1{dimensionless}/P_G1P;
    HG1P = UG1P*pow(10{dimensionless}, -pH_cy+pKa1_G1P);
    mgG1P = UG1P*mg/c0*pow(10{dimensionless}, pKamg_G1P);
    Navg_G1P = HG1P;
    dNavgG1PdH = pow(10{dimensionless}, pKa1_G1P)*(P_G1P-pow(10{dimensionless}, -pH_cy+pKa1_G1P))/(c0*sqr(P_G1P));
    NH_UG1P = 11{dimensionless};
    deltaGof_UG1P = -1756.87{kilojoule_per_mole};
    deltaGpof_UG1P = deltaGof_UG1P+NH_UG1P*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UG1P);
    pKa1_G6P = 6.11{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    P_G6P = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_G6P);
    UG6P = 1{dimensionless}/P_G6P;
    HG6P = UG6P*pow(10{dimensionless}, -pH_cy+pKa1_G6P);
    Navg_G6P = HG6P;
    dNavgG6PdH = pow(10{dimensionless}, pKa1_G6P)*(P_G6P-pow(10{dimensionless}, -pH_cy+pKa1_G6P))/(c0*sqr(P_G6P));
    dNavgG6Pdmg = 0{per_molar};
    NH_UG6P = 11{dimensionless};
    deltaGof_UG6P = -1763.94{kilojoule_per_mole};
    deltaGpof_UG6P = deltaGof_UG6P+NH_UG6P*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UG6P);
    pKa1_F6P = 5.89{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    P_F6P = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_F6P);
    UF6P = 1{dimensionless}/P_F6P;
    HF6P = UF6P*pow(10{dimensionless}, -pH_cy+pKa1_F6P);
    Navg_F6P = HF6P;
    dNavgF6PdH = pow(10{dimensionless}, pKa1_F6P)*(P_F6P-pow(10{dimensionless}, -pH_cy+pKa1_F6P))/(c0*sqr(P_F6P));
    NH_UF6P = 11{dimensionless};
    deltaGof_UF6P = -1760.8{kilojoule_per_mole};
    deltaGpof_UF6P = deltaGof_UF6P+NH_UF6P*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UF6P);
    pKa1_FDP = 6.4{dimensionless};
    pKamg_FDP = 2.7{dimensionless};
    P_FDP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_FDP)+mg/c0*pow(10{dimensionless}, pKamg_FDP);
    UFDP = 1{dimensionless}/P_FDP;
    HFDP = UFDP*pow(10{dimensionless}, -pH_cy+pKa1_FDP);
    mgFDP = UFDP*mg/c0*pow(10{dimensionless}, pKamg_FDP);
    Navg_FDP = HFDP;
    dNavgFDPdH = pow(10{dimensionless}, pKa1_FDP)*P_FDP*(1{dimensionless}-HFDP)/(c0*sqr(P_FDP));
    NH_UFDP = 10{dimensionless};
    deltaGof_UFDP = -2601.4{kilojoule_per_mole};
    deltaGpof_UFDP = deltaGof_UFDP+NH_UFDP*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(16{dimensionless}-NH_UFDP);
    pKa1_GAP = 6.45{dimensionless};
    P_GAP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_GAP);
    UGAP = 1{dimensionless}/P_GAP;
    HGAP = UGAP*pow(10{dimensionless}, -pH_cy+pKa1_GAP);
    Navg_GAP = HGAP;
    dNavgGAPdH = pow(10{dimensionless}, pKa1_GAP)*(P_GAP-pow(10{dimensionless}, -pH_cy+pKa1_GAP))/(c0*sqr(P_GAP));
    dNavgGAPdmg = 0{per_molar};
    NH_UGAP = 5{dimensionless};
    deltaGof_UGAP = -1288.6{kilojoule_per_mole};
    deltaGpof_UGAP = deltaGof_UGAP+NH_UGAP*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UGAP);
    pKamg_G3P = 1.63{dimensionless};
    pKa1_G3P = 6.22{dimensionless}+IcorrpKa*(sqr(2{dimensionless})+sqr(1{dimensionless})-sqr(1{dimensionless}));
    P_G3P = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_G3P)+mg/c0*pow(10{dimensionless}, pKamg_G3P);
    UG3P = 1{dimensionless}/P_G3P;
    HG3P = UG3P*pow(10{dimensionless}, -pH_cy+pKa1_G3P);
    mgG3P = UG3P*mg/c0*pow(10{dimensionless}, pKamg_G3P);
    Navg_G3P = HG3P;
    dNavgG3PdH = pow(10{dimensionless}, pKa1_G3P)*(P_G3P-pow(10{dimensionless}, -pH_cy+pKa1_G3P))/(c0*sqr(P_G3P));
    NH_UG3P = 7{dimensionless};
    deltaGof_UG3P = -1339.25{kilojoule_per_mole};
    deltaGpof_UG3P = deltaGof_UG3P+NH_UG3P*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UG3P);
    pKa1_DHAP = 5.9{dimensionless};
    pKamg_DHAP = 1.57{dimensionless};
    P_DHAP = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_DHAP)+mg/c0*pow(10{dimensionless}, pKamg_DHAP);
    UDHAP = 1{dimensionless}/P_DHAP;
    HDHAP = UDHAP*pow(10{dimensionless}, -pH_cy+pKa1_DHAP);
    mgDHAP = UDHAP*mg/c0*pow(10{dimensionless}, pKamg_DHAP);
    Navg_DHAP = HDHAP;
    dNavgDHAPdH = pow(10{dimensionless}, pKa1_DHAP)*(P_DHAP-pow(10{dimensionless}, -pH_cy+pKa1_DHAP))/(c0*sqr(P_DHAP));
    NH_UDHAP = 5{dimensionless};
    deltaGof_UDHAP = -1296.26{kilojoule_per_mole};
    deltaGpof_UDHAP = deltaGof_UDHAP+NH_UDHAP*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_UDHAP);
    pKa1_13DPG = 7.5{dimensionless};
    P_13DPG = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_13DPG);
    U13DPG = 1{dimensionless}/P_13DPG;
    H13DPG = U13DPG*pow(10{dimensionless}, -pH_cy+pKa1_13DPG);
    Navg_13DPG = H13DPG;
    dNavg13DPGdH = pow(10{dimensionless}, pKa1_13DPG)*(P_13DPG-pow(10{dimensionless}, -pH_cy+pKa1_13DPG))/(c0*sqr(P_13DPG));
    NH_U13DPG = 4{dimensionless};
    deltaGof_U13DPG = -2356.14{kilojoule_per_mole};
    deltaGpof_U13DPG = deltaGof_U13DPG+NH_U13DPG*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(16{dimensionless}-NH_U13DPG);
    pKa1_3PG = 6.21{dimensionless};
    P_3PG = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+6.21{dimensionless});
    U3PG = 1{dimensionless}/P_3PG;
    H3PG = U3PG*pow(10{dimensionless}, -pH_cy+6.21{dimensionless});
    Navg_3PG = H3PG;
    dNavg3PGdH = pow(10{dimensionless}, pKa1_3PG)*(P_3PG-pow(10{dimensionless}, -pH_cy+pKa1_3PG))/(c0*sqr(P_3PG));
    NH_U3PG = 4{dimensionless};
    deltaGof_U3PG = -1502.54{kilojoule_per_mole};
    deltaGpof_U3PG = deltaGof_U3PG+NH_U3PG*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(9{dimensionless}-NH_U3PG);
    pKa1_2PG = 7{dimensionless};
    pKamg_2PG = 2.45{dimensionless};
    pKak_2PG = 1.18{dimensionless};
    P_2PG = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_2PG)+mg/c0*pow(10{dimensionless}, pKamg_2PG)+k/c0*pow(10{dimensionless}, pKak_2PG);
    U2PG = 1{dimensionless}/P_2PG;
    H2PG = U2PG*pow(10{dimensionless}, -pH_cy+pKa1_2PG);
    mg2PG = U2PG*mg/c0*pow(10{dimensionless}, pKamg_2PG);
    k2PG = U2PG*k/c0*pow(10{dimensionless}, pKak_2PG);
    Navg_2PG = H2PG;
    dNavg2PGdH = pow(10{dimensionless}, pKa1_2PG)*(P_2PG-pow(10{dimensionless}, -pH_cy+pKa1_2PG))/(c0*sqr(P_2PG));
    NH_U2PG = 4{dimensionless};
    deltaGof_U2PG = -1496.38{kilojoule_per_mole};
    deltaGpof_U2PG = deltaGof_U2PG+NH_U2PG*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(9{dimensionless}-NH_U2PG);
    pKa1_PEP = 6.35{dimensionless};
    pKamg_PEP = 2.26{dimensionless};
    pKak_PEP = 1.08{dimensionless};
    P_PEP = 1{dimensionless}+pow(10{dimensionless}, pKa1_PEP-pH_cy)+mg/c0*pow(10{dimensionless}, pKamg_PEP)+k/c0*pow(10{dimensionless}, pKak_PEP);
    UPEP = 1{dimensionless}/P_PEP;
    HPEP = UPEP*pow(10{dimensionless}, pKa1_PEP-pH_cy);
    kPEP = UPEP*k/c0*pow(10{dimensionless}, pKak_PEP);
    mgPEP = UPEP*mg/c0*pow(10{dimensionless}, pKamg_PEP);
    Navg_PEP = HPEP;
    dNavgPEPdH = pow(10{dimensionless}, pKa1_PEP)*(P_PEP-pow(10{dimensionless}, -pH_cy+pKa1_PEP))/(c0*sqr(P_PEP));
    NH_UPEP = 2{dimensionless};
    deltaGof_UPEP = -1263.65{kilojoule_per_mole};
    deltaGpof_UPEP = deltaGof_UPEP+NH_UPEP*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(9{dimensionless}-NH_UPEP);
    pKa1_PYR = 2.49{dimensionless};
    P_PYR = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_PYR);
    UPYR = 1{dimensionless}/P_PYR;
    HPYR = UPYR*pow(10{dimensionless}, -pH_cy+pKa1_PYR);
    Navg_PYR = HPYR;
    dNavgPYRdH = pow(10{dimensionless}, pKa1_PYR)*(P_PYR-pow(10{dimensionless}, -pH_cy+pKa1_PYR))/(c0*sqr(P_PYR));
    dNavgPYRdmg = 0{per_molar};
    NH_UPYR = 3{dimensionless};
    deltaGof_UPYR = -472.27{kilojoule_per_mole};
    deltaGpof_UPYR = deltaGof_UPYR+NH_UPYR*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(1{dimensionless}-NH_UPYR);
    pKamg_LAC = 0.98{dimensionless};
    pKa1_LAC = 3.67{dimensionless}+IcorrpKa*(sqr(1{dimensionless})+sqr(1{dimensionless})-sqr(0{dimensionless}));
    P_LAC = 1{dimensionless}+pow(10{dimensionless}, -pH_cy+pKa1_LAC)+mg/c0*pow(10{dimensionless}, pKamg_LAC);
    ULAC = 1{dimensionless}/P_LAC;
    HLAC = ULAC*pow(10{dimensionless}, -pH_cy+pKa1_LAC);
    mgLAC = mg/c0*pow(10{dimensionless}, pKamg_LAC)*ULAC;
    Navg_LAC = HLAC;
    dNavgLACdH = pow(10{dimensionless}, pKa1_LAC)*(P_LAC-pow(10{dimensionless}, -pH_cy+pKa1_LAC))/(c0*sqr(P_LAC));
    dmgLACdmg = (P_LAC*pow(10{dimensionless}, pKamg_LAC)/c0-mg/c0*pow(10{dimensionless}, 2{dimensionless}*pKamg_LAC)/c0)/sqr(P_LAC);
    dmgLACdpH = mg/c0*pow(10{dimensionless}, -pH_cy+pKa1_LAC+pKamg_LAC)*ln(10{dimensionless})/sqr(P_LAC);
    NH_ULAC = 5{dimensionless};
    deltaGof_ULAC = -516.72{kilojoule_per_mole};
    deltaGpof_ULAC = deltaGof_ULAC+NH_ULAC*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(1{dimensionless}-NH_ULAC);
    dNH_GLY = -10{dimensionless};
    deltaGpo_GLY = 655.7{kilojoule_per_mole}+dNH_GLY*ln(10{dimensionless})*R*T*pH_cy;
    NH_NAD = 26{dimensionless};
    deltaGof_NAD = 0{kilojoule_per_mole};
    deltaGpof_NAD = deltaGof_NAD+NH_NAD*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(1{dimensionless}-NH_NAD);
    NH_NADH = 27{dimensionless};
    deltaGof_NADH = 22.65{kilojoule_per_mole};
    deltaGpof_NADH = deltaGof_NADH+NH_NADH*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(4{dimensionless}-NH_NADH);
    NH_H2O = 2{dimensionless};
    deltaGof_H2O = -237.19{kilojoule_per_mole};
    deltaGpof_H2O = deltaGof_H2O+NH_H2O*ln(10{dimensionless})*R*T*pH_cy-IcorrdeltaGpof*(0{dimensionless}-NH_H2O);
    NH_H = 1{dimensionless};
    deltaGof_H = 0{kilojoule_per_mole};
    deltaGpof_H = deltaGof_H+NH_H*ln(10{dimensionless})*R*T*pH_cy;
    deltaH_CK = Navg_ATP+Navg_CR-Navg_PCR-Navg_ADP+NH_ATP4+NH_HCR-NH_HPCR-NH_ADP3;
    slopeint_1 = 1000{dimensionless}*2.04742110212706{kelvin};
    slopeint_2 = 1000{dimensionless}*0.013838383371953{dimensionless};
    Kref_CKT = exp(slopeint_1/T+slopeint_2);
    I25 = 0.25{molar};
    alphadebye1 = 1.10708{dimensionless}-1.54508e-3{per_kelvin}*T+5.95584e-6{per_kelvin2}*sqr(T);
    IcorrneglnKrefCK = alphadebye1*(sqrt(I25)/(1{half_molar}+1.6{dimensionless}*sqrt(I25))-sqrt(I)/(1{half_molar}+1.6{dimensionless}*sqrt(I)));
    neglnKrefCK_Iexp = -ln(Kref_CKT)+IcorrneglnKrefCK*(sqr(4{dimensionless})+sqr(0{dimensionless})-sqr(2{dimensionless})-sqr(3{dimensionless})-sqr(1{dimensionless}));
    Kref_CK = exp(-neglnKrefCK_Iexp);
    deltaGpo_CK = -R*T*ln(Kref_CK);
    Kapp_CK = exp(-deltaGpo_CK/(R*T))*pow(10{dimensionless}, -pH_cy)*P_ATP*P_CR/(P_PCR*P_ADP);
    deltaH_ADK = 2{dimensionless}*Navg_ADP-Navg_ATP-Navg_AMP+2{dimensionless}*NH_ADP3-NH_ATP4-NH_AMP2;
    deltaGpo_ADK = 2{dimensionless}*deltaGpof_ADP3-deltaGpof_ATP4-deltaGpof_AMP2;
    Kapp_ADK = exp(-deltaGpo_ADK/(R*T))*sqr(P_ADP)/(P_ATP*P_AMP);
    deltaH_GP = Navg_G1P-Navg_Pi+1{dimensionless}-NH_HPi2;
    deltaGpo_GP = deltaGpo_GLY+deltaGpof_UG1P-deltaGpof_HPi2;
    Kapp_GP = exp(-deltaGpo_GP/(R*T))*P_G1P/P_Pi;
    deltaH_PGLM = Navg_G6P-Navg_G1P+NH_UG6P-NH_UG1P;
    deltaGpo_PGLM = deltaGpof_UG6P-deltaGpof_UG1P;
    Kapp_PGLM = exp(-deltaGpo_PGLM/(R*T))*P_G6P/P_G1P;
    deltaH_PGI = Navg_F6P-Navg_G6P+NH_UF6P-NH_UG6P;
    deltaGpo_PGI = deltaGpof_UF6P-deltaGpof_UG6P;
    Kapp_PGI = exp(-deltaGpo_PGI/(R*T))*P_F6P/P_G6P;
    deltaH_PFK = Navg_ADP+Navg_FDP-Navg_F6P-Navg_ATP+NH_ADP3+NH_UFDP-NH_UF6P-NH_ATP4;
    deltaGpo_PFK = deltaGpof_UFDP+deltaGpof_ADP3+deltaGpof_H-deltaGpof_UF6P-deltaGpof_ATP4;
    Kapp_PFK = exp(-deltaGpo_PFK/(R*T))*P_FDP*P_ADP/(P_F6P*P_ATP*pow(10{dimensionless}, -pH_cy));
    deltaH_ALD = Navg_DHAP+Navg_GAP-Navg_FDP+NH_UDHAP+NH_UGAP-NH_UFDP;
    deltaGpo_ALD = deltaGpof_UDHAP+deltaGpof_UGAP-deltaGpof_UFDP;
    Kapp_ALD = exp(-deltaGpo_ALD/(R*T))*P_GAP*P_FDP/P_DHAP;
    deltaH_TPI = Navg_DHAP-Navg_GAP+NH_UDHAP-NH_UGAP;
    deltaGpo_TPI = deltaGpof_UDHAP-deltaGpof_UGAP;
    Kapp_TPI = exp(-deltaGpo_TPI/(R*T))*P_DHAP/P_GAP;
    deltaH_GAPDH = Navg_13DPG-Navg_GAP-Navg_Pi+NH_U13DPG+NH_NADH-NH_UGAP-NH_HPi2-NH_NAD;
    deltaGpo_GAPDH = deltaGpof_U13DPG+deltaGpof_NADH+deltaGpof_H-deltaGpof_HPi2-deltaGpof_UGAP-deltaGpof_NAD;
    Kapp_GAPDH = exp(-deltaGpo_GAPDH/(R*T))*P_13DPG/(P_Pi*P_GAP*pow(10{dimensionless}, -pH_cy));
    deltaH_G3PDH = Navg_DHAP-Navg_G3P+NH_UDHAP+NH_NADH-NH_NAD-NH_UG3P;
    deltaGpo_G3PDH = deltaGpof_H+deltaGpof_NADH+deltaGpof_UDHAP-deltaGpof_NAD-deltaGpof_UG3P;
    Kapp_G3PDH = exp(-deltaGpo_G3PDH/(R*T))*P_DHAP/(P_G3P*pow(10{dimensionless}, -pH_cy));
    deltaH_PGK = Navg_3PG+Navg_ATP-Navg_13DPG-Navg_ADP+NH_U3PG+NH_ATP4-NH_U13DPG-NH_ADP3;
    deltaGpo_PGK = deltaGpof_ATP4+deltaGpof_U3PG-deltaGpof_U13DPG-deltaGpof_ADP3;
    Kapp_PGK = exp(-deltaGpo_PGK/(R*T))*P_ATP*P_3PG/(P_13DPG*P_ADP);
    deltaH_PGM = Navg_2PG-Navg_3PG+NH_U2PG-NH_U3PG;
    deltaGpo_PGM = deltaGpof_U2PG-deltaGpof_U3PG;
    Kapp_PGM = exp(-deltaGpo_PGM/(R*T))*P_2PG/P_3PG;
    deltaH_ENOL = Navg_PEP-Navg_2PG+NH_H2O+NH_UPEP-NH_U2PG;
    deltaGpo_ENOL = deltaGpof_H2O+deltaGpof_UPEP-deltaGpof_U2PG;
    Kapp_ENOL = exp(-deltaGpo_ENOL/(R*T))*P_PEP/P_2PG;
    deltaH_PK = Navg_PYR+Navg_ATP-Navg_PEP-Navg_ADP+NH_UPYR+NH_ATP4-NH_UPEP-NH_ADP3;
    deltaGpo_PK = deltaGpof_UPYR+deltaGpof_ATP4-deltaGpof_H-deltaGpof_UPEP-deltaGpof_ADP3;
    Kapp_PK = exp(-deltaGpo_PK/(R*T))*P_PYR*P_ATP*pow(10{dimensionless}, -pH_cy)/(P_PEP*P_ADP);
    deltaH_LDH = Navg_LAC-Navg_PYR+NH_ULAC+NH_NAD-NH_UPYR-NH_NADH;
    deltaGpo_LDH = deltaGpof_ULAC+deltaGpof_NAD-deltaGpof_UPYR-deltaGpof_NADH-deltaGpof_H;
    Kapp_LDH = exp(-deltaGpo_LDH/(R*T))*P_LAC*pow(10{dimensionless}, -pH_cy)/P_PYR;
    deltaH_ATPase = Navg_ADP+Navg_Pi-Navg_ATP+NH_ADP3+NH_HPi2-NH_ATP4-NH_H2O;
    deltaGpo_ATPase = deltaGpof_ADP3+deltaGpof_HPi2+deltaGpof_H-deltaGpof_H2O-deltaGpof_ATP4;
    Kapp_ATPase = exp(-deltaGpo_ATPase/(R*T))*P_ADP*P_Pi/(P_ATP*pow(10{dimensionless}, -pH_cy));
  enddef;

  def comp glycogen_phosphorylase_A as
    var Dglya: dimensionless {pub: out};
    var pa: dimensionless {pub: out};
    var VbglyA: molar_per_minute {pub: out};
    var glyAF: per_minute {pub: out};
    var glyAR: per_minute {pub: out};
    var flux_GPa: molar_per_minute {pub: out};
    var KgpA_glyf: molar {pub: in};
    var KgpA_glyb: molar {pub: in};
    var KgpA_igly: molar {pub: in};
    var KgpA_pi: molar {pub: in};
    var KgpA_ipi: molar {pub: in};
    var KgpA_g1p: molar {pub: in};
    var KgpA_ig1p: molar {pub: in};
    var Vfgly: molar_per_minute {pub: in};
    var fracA: dimensionless {pub: in};
    var Gly: molar {pub: in};
    var Pi: molar {pub: in};
    var G1P: molar {pub: in};
    var pH_cy: dimensionless {pub: in};
    var Kapp_GP: dimensionless {pub: in};
    Dglya = 1{dimensionless}+Gly/KgpA_glyf+Pi/KgpA_pi+Gly*Pi/(KgpA_glyf*KgpA_ipi)+Gly/KgpA_glyb+G1P/KgpA_g1p+Gly*G1P/(KgpA_ig1p*KgpA_glyb);
    pa = 1.404{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, 5.94{dimensionless}-pH_cy)+pow(10{dimensionless}, pH_cy-7.29{dimensionless}));
    VbglyA = pa*Vfgly*KgpA_glyb*KgpA_ig1p/(KgpA_igly*KgpA_pi*Kapp_GP);
    glyAF = pa*Vfgly*Pi/(KgpA_igly*KgpA_pi)/Dglya;
    glyAR = VbglyA*Gly/(KgpA_glyb*KgpA_ig1p)/Dglya;
    flux_GPa = fracA*(Gly*glyAF-G1P*glyAR);
  enddef;

  def comp glycogen_phosphorylase_B as
    var fracB: dimensionless {pub: out};
    var M: dimensionless {pub: out};
    var Dglyb: dimensionless {pub: out};
    var pb: dimensionless {pub: out};
    var VbglyB: molar_per_minute {pub: out};
    var glyBF: per_minute {pub: out};
    var glyBR: per_minute {pub: out};
    var flux_GPb: molar_per_minute {pub: out};
    var fracA: dimensionless {pub: in};
    var pH_cy: dimensionless {pub: in};
    var AMP: molar {pub: in};
    var Gly: molar {pub: in};
    var Pi: molar {pub: in};
    var G1P: molar {pub: in};
    var Kapp_GP: dimensionless {pub: in};
    var nH: dimensionless {pub: in};
    var Vfgly: molar_per_minute {pub: in};
    var Kgp_amp: molar {pub: in};
    var KgpB_iglyf: molar {pub: in};
    var KgpB_iglyb: molar {pub: in};
    var KgpB_pi: molar {pub: in};
    var KgpB_ipi: molar {pub: in};
    var KgpB_g1p: molar {pub: in};
    var KgpB_ig1p: molar {pub: in};
    fracB = 1{dimensionless}-fracA;
    M = pow(AMP/Kgp_amp, nH)/(1{dimensionless}+pow(AMP/Kgp_amp, nH));
    Dglyb = 1{dimensionless}+Gly/KgpB_iglyf+Pi/KgpB_ipi+Gly/KgpB_iglyb+G1P/KgpB_ig1p+Gly*Pi/(KgpB_iglyf*KgpB_pi)+Gly*G1P/(KgpB_g1p*KgpB_iglyb);
    pb = 1.75{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, 6.12{dimensionless}-pH_cy)+pow(10{dimensionless}, pH_cy-7.03{dimensionless}));
    VbglyB = pb*Vfgly*KgpB_g1p*KgpB_iglyb/(KgpB_iglyf*KgpB_pi*Kapp_GP);
    glyBF = pb*M*Vfgly*Pi/(KgpB_iglyf*KgpB_pi)/Dglyb;
    glyBR = M*VbglyB*Gly/(KgpB_g1p*KgpB_iglyb)/Dglyb;
    flux_GPb = fracB*(Gly*glyBF-G1P*glyBR);
  enddef;

  def comp PGLM as
    var Vfpglm: molar_per_minute {pub: out};
    var Vbpglm: molar_per_minute {pub: out};
    var v_PGLM: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Vffpglm: molar_per_minute {pub: in};
    var Kpglm_g1p: molar {pub: in};
    var Kpglm_g6p: molar {pub: in};
    var Kapp_PGLM: dimensionless {pub: in};
    var G1P: molar {pub: in};
    var G6P: molar {pub: in};
    Vfpglm = Vffpglm*1.329{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+6.64{dimensionless})+pow(10{dimensionless}, pH_cy-8.36{dimensionless}));
    Vbpglm = Vfpglm*Kpglm_g6p/(Kpglm_g1p*Kapp_PGLM);
    v_PGLM = (Vfpglm*G1P/Kpglm_g1p-Vbpglm*G6P/Kpglm_g6p)/(1{dimensionless}+G1P/Kpglm_g1p+G6P/Kpglm_g6p);
  enddef;

  def comp PGI as
    var Vbpgi: molar_per_minute {pub: out};
    var Vfpgi: molar_per_minute {pub: out};
    var v_PGI: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Vbbpgi: molar_per_minute {pub: in};
    var Kpgi_g6p: molar {pub: in};
    var Kpgi_f6p: molar {pub: in};
    var Kapp_PGI: dimensionless {pub: in};
    var G6P: molar {pub: in};
    var F6P: molar {pub: in};
    Vbpgi = Vbbpgi/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+6.94{dimensionless})+pow(10{dimensionless}, pH_cy-9.35{dimensionless}));
    Vfpgi = Vbpgi*Kpgi_g6p/Kpgi_f6p*Kapp_PGI;
    v_PGI = (Vfpgi*G6P/Kpgi_g6p-Vbpgi*F6P/Kpgi_f6p)/(1{dimensionless}+F6P/Kpgi_f6p+G6P/Kpgi_g6p);
  enddef;

  def comp PFK as
    var Vfpfk: molar_per_minute {pub: out};
    var Vbpfk: molar_per_minute {pub: out};
    var L: dimensionless {pub: out};
    var alpha: dimensionless {pub: out};
    var Delta: dimensionless {pub: out};
    var Deltap: dimensionless {pub: out};
    var v_PFK: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Lo: dimensionless {pub: in};
    var d: dimensionless {pub: in};
    var Vffpfk: molar_per_minute {pub: in};
    var Kpfk_fbp: molar {pub: in};
    var Kpfk_adp: molar {pub: in};
    var Kpfk_f6p: molar {pub: in};
    var Kpfk_atp: molar {pub: in};
    var Kpfk_fbpT: molar {pub: in};
    var Kpfk_adpT: molar {pub: in};
    var Kpfk_f6pT: molar {pub: in};
    var Kpfk_atpT: molar {pub: in};
    var Kapp_PFK: dimensionless {pub: in};
    var Kmpfk: molar {pub: in};
    var Kpfki: molar {pub: in};
    var ATP: molar {pub: in};
    var ADP: molar {pub: in};
    var AMP: molar {pub: in};
    var F6P: molar {pub: in};
    var FBP: molar {pub: in};
    Vfpfk = Vffpfk/(1{dimensionless}+pow(pH_cy/6.8{dimensionless}, -30{dimensionless}));
    Vbpfk = Vfpfk*Kpfk_fbp*Kpfk_adp/(Kpfk_f6p*Kpfk_atp*Kapp_PFK);
    L = Lo*pow((1{dimensionless}+ATP/Kpfki)/(1{dimensionless}+d*ATP/Kpfki)*(1{dimensionless}+e*AMP/Kmpfk)/(1{dimensionless}+AMP/Kmpfk), 4{dimensionless});
    alpha = Kpfk_f6p*Kpfk_atp/(Kpfk_f6pT*Kpfk_atpT);
    Delta = (1{dimensionless}+F6P/Kpfk_f6p)*(1{dimensionless}+ATP/Kpfk_atp)+FBP/Kpfk_fbp+ADP/Kpfk_adp*(1{dimensionless}+FBP/Kpfk_fbp);
    Deltap = (1{dimensionless}+F6P/Kpfk_f6pT)*(1{dimensionless}+ATP/Kpfk_atpT)+FBP/Kpfk_fbpT+ADP/Kpfk_adpT*(1{dimensionless}+FBP/Kpfk_fbpT);
    v_PFK = (Vfpfk*F6P*ATP/(Kpfk_f6p*Kpfk_atp)/Delta-Vbpfk*ADP*FBP/(Kpfk_adp*Kpfk_fbp)/Delta)*(1{dimensionless}+alpha*L*pow(Deltap/Delta, 3{dimensionless}))/(1{dimensionless}+L*pow(Deltap/Delta, 4{dimensionless}));
  enddef;

  def comp ALD as
    var Vfald: molar_per_minute {pub: out};
    var Vbald: molar_per_minute {pub: out};
    var v_ALD: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Vffald: molar_per_minute {pub: in};
    var Kald_gap: molar {pub: in};
    var Kald_fbp: molar {pub: in};
    var Kald_dhap: molar {pub: in};
    var Kapp_ALD: dimensionless {pub: in};
    var FBP: molar {pub: in};
    var GAP: molar {pub: in};
    var DHAP: molar {pub: in};
    Vfald = Vffald*1.013{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+5.32{dimensionless})+pow(10{dimensionless}, pH_cy-9.15{dimensionless}));
    Vbald = Vfald*Kald_gap*Kald_dhap/(Kald_fbp*Kapp_ALD*1{molar});
    v_ALD = (Vfald*FBP/Kald_fbp-Vbald*GAP*DHAP/(Kald_gap*Kald_dhap))/(1{dimensionless}+FBP/Kald_fbp+GAP/Kald_gap+DHAP/Kald_dhap);
  enddef;

  def comp TPI as
    var Vftpi: molar_per_minute {pub: out};
    var Vbtpi: molar_per_minute {pub: out};
    var v_TPI: molar_per_minute {pub: out};
    var Vfftpi: molar_per_minute {pub: in};
    var Ktpi_dhap: molar {pub: in};
    var Ktpi_gap: molar {pub: in};
    var Kapp_TPI: dimensionless {pub: in};
    var GAP: molar {pub: in};
    var DHAP: molar {pub: in};
    Vftpi = Vfftpi;
    Vbtpi = Vftpi*Ktpi_dhap/(Ktpi_gap*Kapp_TPI);
    v_TPI = (Vftpi*GAP/Ktpi_gap-Vbtpi*DHAP/Ktpi_dhap)/(1{dimensionless}+GAP/Ktpi_gap+DHAP/Ktpi_dhap);
  enddef;

  def comp G3PDH as
    var Dg3pdh: dimensionless {pub: out};
    var Vbg3pdh: molar_per_minute {pub: out};
    var Vfg3pdh: molar_per_minute {pub: out};
    var v_G3PDH: molar_per_minute {pub: out};
    var Vbbg3pdh: molar_per_minute {pub: in};
    var Kg3pdh_dhap: molar {pub: in};
    var Kg3pdh_g3p: molar {pub: in};
    var Kg3pdh_nadh: molar {pub: in};
    var Kg3pdh_nad: molar {pub: in};
    var Kapp_G3PDH: dimensionless {pub: in};
    var G3P: molar {pub: in};
    var NADH: molar {pub: in};
    var DHAP: molar {pub: in};
    var NAD: molar {pub: in};
    Dg3pdh = (1{dimensionless}+G3P/Kg3pdh_g3p+NADH/Kg3pdh_nadh)*(1{dimensionless}+DHAP/Kg3pdh_dhap+NAD/Kg3pdh_nadh);
    Vbg3pdh = Vbbg3pdh;
    Vfg3pdh = Vbg3pdh*Kg3pdh_g3p*Kg3pdh_nad*Kapp_G3PDH/(Kg3pdh_dhap*Kg3pdh_nadh);
    v_G3PDH = (Vfg3pdh*G3P*NAD/(Kg3pdh_g3p*Kg3pdh_nad)-Vbg3pdh*DHAP*NADH/(Kg3pdh_dhap*Kg3pdh_nadh))/Dg3pdh;
  enddef;

  def comp GAPDH as
    var Dgap: dimensionless {pub: out};
    var Vfgad: molar_per_minute {pub: out};
    var Vbgad: molar_per_minute {pub: out};
    var v_GAPDH: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Vffgad: molar_per_minute {pub: in};
    var Kgapdh_bpg: molar {pub: in};
    var Kgapdh_gap: molar {pub: in};
    var Kgapdh_pi: molar {pub: in};
    var Kgapdh_nadh: molar {pub: in};
    var Kgapdh_nad: molar {pub: in};
    var Kapp_GAPDH: dimensionless {pub: in};
    var GAP: molar {pub: in};
    var BPG: molar {pub: in};
    var NADH: molar {pub: in};
    var Pi: molar {pub: in};
    var NAD: molar {pub: in};
    Dgap = 1{dimensionless}+Pi/Kgapdh_pi+GAP/Kgapdh_gap+NAD/Kgapdh_nad+GAP*NAD/(Kgapdh_gap*Kgapdh_nad)+GAP*NAD*Pi/(Kgapdh_gap*Kgapdh_nad*Kgapdh_pi)+BPG/Kgapdh_bpg+NADH/Kgapdh_nadh+BPG*NADH/(Kgapdh_nadh*Kgapdh_bpg);
    Vfgad = Vffgad*0.0007{dimensionless}*exp(pH_cy*0.8979{dimensionless});
    Vbgad = Vfgad*Kgapdh_bpg*Kgapdh_nadh*1{molar}/(Kgapdh_gap*Kgapdh_pi*Kgapdh_nad*Kapp_GAPDH);
    v_GAPDH = (Vfgad*GAP*NAD*Pi/(Kgapdh_nad*Kgapdh_gap*Kgapdh_pi)-Vbgad*BPG*NADH/(Kgapdh_bpg*Kgapdh_nadh))/Dgap;
  enddef;

  def comp PGK as
    var Vbpgk: molar_per_minute {pub: out};
    var Vfpgk: molar_per_minute {pub: out};
    var D_PGK: dimensionless {pub: out};
    var v_PGK: molar_per_minute {pub: out};
    var Vbbpgk: molar_per_minute {pub: in};
    var Kpgk_bpg: molar {pub: in};
    var Kpgk_3pg: molar {pub: in};
    var Kpgk_atp: molar {pub: in};
    var Kpgk_adp: molar {pub: in};
    var Kapp_PGK: dimensionless {pub: in};
    var P3G: molar {pub: in};
    var BPG: molar {pub: in};
    var ATP: molar {pub: in};
    var ADP: molar {pub: in};
    var NAD: molar {pub: in};
    Vbpgk = Vbbpgk;
    Vfpgk = Vbpgk*Kpgk_bpg*Kpgk_adp/(Kpgk_3pg*Kpgk_atp)*Kapp_PGK;
    D_PGK = 1{dimensionless}+ADP/Kpgk_adp+BPG/Kpgk_bpg+BPG*ADP/(Kpgk_bpg*Kpgk_adp)+P3G/Kpgk_3pg+ATP/Kpgk_atp+P3G*ATP/(Kpgk_3pg*Kpgk_atp);
    v_PGK = (Vfpgk*BPG*ADP/(Kpgk_adp*Kpgk_bpg)-Vbpgk*ATP*P3G/(Kpgk_atp*Kpgk_3pg))/D_PGK;
  enddef;

  def comp PGM as
    var Vfpgm: molar_per_minute {pub: out};
    var Vbpgm: molar_per_minute {pub: out};
    var v_PGM: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Vffpgm: molar_per_minute {pub: in};
    var Kpgm_2pg: molar {pub: in};
    var Kpgm_3pg: molar {pub: in};
    var Kapp_PGM: dimensionless {pub: in};
    var P2G: molar {pub: in};
    var P3G: molar {pub: in};
    Vfpgm = Vffpgm*0.989{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+5.62{dimensionless})+pow(10{dimensionless}, pH_cy-8.74{dimensionless}));
    Vbpgm = Vfpgm*Kpgm_2pg/(Kpgm_3pg*Kapp_PGM);
    v_PGM = (Vfpgm*P3G/Kpgm_3pg-Vbpgm*P2G/Kpgm_2pg)/(1{dimensionless}+P3G/Kpgm_3pg+P2G/Kpgm_2pg);
  enddef;

  def comp ENOL as
    var Vfen: molar_per_minute {pub: out};
    var Vben: molar_per_minute {pub: out};
    var v_ENOL: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Vffen: molar_per_minute {pub: in};
    var Ken_2pg: molar {pub: in};
    var Ken_pep: molar {pub: in};
    var Kapp_ENOL: dimensionless {pub: in};
    var P2G: molar {pub: in};
    var PEP: molar {pub: in};
    Vfen = Vffen;
    Vben = Vfen*Ken_pep/(Ken_2pg*Kapp_ENOL);
    v_ENOL = (Vfen*P2G/Ken_2pg-Vben*PEP/Ken_pep)/(1{dimensionless}+PEP/Ken_pep+P2G/Ken_2pg);
  enddef;

  def comp PK as
    var Vfpk: molar_per_minute {pub: out};
    var Vbpk: molar_per_minute {pub: out};
    var v_PK: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Vffpk: molar_per_minute {pub: in};
    var Kpk_atp: molar {pub: in};
    var Kpk_adp: molar {pub: in};
    var Kpk_pep: molar {pub: in};
    var Kpk_pyr: molar {pub: in};
    var Kapp_PK: dimensionless {pub: in};
    var ATP: molar {pub: in};
    var ADP: molar {pub: in};
    var PEP: molar {pub: in};
    var PYR: molar {pub: in};
    Vfpk = Vffpk*1.05{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -pH_cy+5.58{dimensionless})+pow(10{dimensionless}, pH_cy-8.79{dimensionless}));
    Vbpk = Vfpk*Kpk_pyr*Kpk_atp/(Kpk_pep*Kpk_adp*Kapp_PK);
    v_PK = (Vfpk*PEP*ADP/(Kpk_pep*Kpk_adp)-Vbpk*PYR*ATP/(Kpk_pyr*Kpk_atp))/(1{dimensionless}+PEP/Kpk_pep+ADP/Kpk_adp+PEP*ADP/(Kpk_pep*Kpk_adp)+ATP/Kpk_atp+PYR/Kpk_pyr+PYR*ATP/(Kpk_pyr*Kpk_atp));
  enddef;

  def comp LDH as
    var Vfldh: molar_per_minute {pub: out};
    var Vbldh: molar_per_minute {pub: out};
    var v_LDH: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var Vffldh: molar_per_minute {pub: in};
    var Kldh_lac: molar {pub: in};
    var Kldh_pyr: molar {pub: in};
    var Kldh_nad: molar {pub: in};
    var Kldh_nadh: molar {pub: in};
    var Kapp_LDH: dimensionless {pub: in};
    var PYR: molar {pub: in};
    var LAC: molar {pub: in};
    var NAD: molar {pub: in};
    var NADH: molar {pub: in};
    Vfldh = Vffldh*(-0.1134{dimensionless}*pH_cy+1.6069{dimensionless});
    Vbldh = Vfldh*Kldh_lac*Kldh_nad/(Kldh_pyr*Kldh_nadh*Kapp_LDH);
    v_LDH = (Vfldh*PYR*NADH/(Kldh_pyr*Kldh_nadh)-Vbldh*LAC*NAD/(Kldh_lac*Kldh_nad))/(1{dimensionless}+PYR/Kldh_pyr+NADH/Kldh_nadh+PYR*NADH/(Kldh_pyr*Kldh_nadh)+LAC/Kldh_lac+NAD/Kldh_nad+LAC*NAD/(Kldh_lac*Kldh_nad));
  enddef;

  def comp creatine_kinase as
    var VrevCK: molar_per_minute {pub: out};
    var CK: molar_per_minute {pub: out};
    var VforCK: molar_per_minute {pub: in};
    var Kck_iatp: molar {pub: in};
    var Kck_iadp: molar {pub: in};
    var Kck_pcr: molar {pub: in};
    var Kck_ipcr: molar {pub: in};
    var Kck_cr: molar {pub: in};
    var Kapp_CK: dimensionless {pub: in};
    var ATP: molar {pub: in};
    var ADP: molar {pub: in};
    var Cr: molar {pub: in};
    var PCr: molar {pub: in};
    VrevCK = VforCK/Kapp_CK*Kck_iatp*Kck_cr/(Kck_iadp*Kck_pcr);
    CK = (VrevCK*ATP*Cr/(Kck_iatp*Kck_cr)-VforCK*ADP*PCr/(Kck_iadp*Kck_pcr))/(1{dimensionless}+ADP/Kck_iadp+PCr/Kck_ipcr+PCr*ADP/(Kck_iadp*Kck_pcr)+ATP/Kck_iatp+Cr*ATP/(Kck_cr*Kck_iatp));
  enddef;

  def comp adenylate_kinase as
    var Vbadk: molar_per_minute {pub: out};
    var ADK: molar_per_minute {pub: out};
    var Vfadk: molar_per_minute {pub: in};
    var Kadk_atp: molar {pub: in};
    var Kadk_adp: molar {pub: in};
    var Kadk_amp: molar {pub: in};
    var Kapp_ADK: dimensionless {pub: in};
    var ATP: molar {pub: in};
    var ADP: molar {pub: in};
    var AMP: molar {pub: in};
    Vbadk = Vfadk*sqr(Kadk_adp)/(Kadk_amp*Kadk_atp*Kapp_ADK);
    ADK = (Vfadk*ATP*AMP/(Kadk_atp*Kadk_amp)-Vbadk*sqr(ADP/Kadk_adp))/(1{dimensionless}+ATP/Kadk_atp+AMP/Kadk_amp+ATP*AMP/(Kadk_atp*Kadk_amp)+2{dimensionless}*ADP/Kadk_adp+sqr(ADP)/sqr(Kadk_adp));
  enddef;

  def comp ATPase as
    var ATPase: molar_per_minute {pub: out};
    var kut: per_minute {pub: in};
    var ATP: molar {pub: in};
    ATPase = kut*ATP;
  enddef;

  def comp OXPHOS as
    var oxphos: molar_per_minute {pub: out};
    var VmaxOxPhos: molar_per_minute {pub: in};
    var nnHH: dimensionless {pub: in};
    var Kmadp: molar {pub: in};
    var ADP: molar {pub: in};
    oxphos = VmaxOxPhos*pow(ADP/Kmadp, nnHH)/(1{dimensionless}+pow(ADP/Kmadp, nnHH));
  enddef;

  def comp lactate_transport as
    var Kh: dimensionless {pub: out};
    var v_MCT: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var pKmct1: dimensionless {pub: in};
    var Vmax_MCT: molar_per_minute {pub: in};
    var nnHH: dimensionless {pub: in};
    var Klac1: molar {pub: in};
    var LAC: molar {pub: in};
    var pH_ec: dimensionless {pub: in};
    var LAC_ec: molar {pub: in};
    Kh = pow(10{dimensionless}, -pKmct1);
    v_MCT = Vmax_MCT*(LAC*pow(10{dimensionless}, -pH_cy)/(Kh*Klac1)-LAC_ec*pow(10{dimensionless}, -pH_ec)/(Kh*Klac1))/(LAC*pow(10{dimensionless}, -pH_cy)/(Kh*Klac1)+2{dimensionless}+pow(10{dimensionless}, -pH_cy)/Kh+LAC/Klac1+LAC_ec/Klac1+pow(10{dimensionless}, -pH_ec)/Kh+LAC_ec*pow(10{dimensionless}, -pH_ec)/(Klac1*Kh));
  enddef;

  def comp CO2_generation_transport as
    var RQ: dimensionless {pub: out};
    var PO2ratio: dimensionless {pub: out};
    var fluxO2: molar_per_minute {pub: out};
    var fluxCO2: molar_per_minute {pub: out};
    var oxphos: molar_per_minute {pub: in};
    RQ = 1{dimensionless};
    PO2ratio = 4.2{dimensionless};
    fluxO2 = oxphos/PO2ratio;
    fluxCO2 = RQ*fluxO2;
  enddef;

  def comp Passive_permeation_flux as
    var v_psCO2: molar_per_minute {pub: out};
    var v_hydrCO2cy: molar_per_minute {pub: out};
    var v_hydrCO2ec: molar_per_minute {pub: out};
    var pH_cy: dimensionless {pub: in};
    var X_CA: dimensionless {pub: in};
    var PSVCO2: per_minute {pub: in};
    var kf_hydrCO2: per_minute {pub: in};
    var kb_hydrCO2: per_minute {pub: in};
    var pH_ec: dimensionless {pub: in};
    var CO2_ec: molar {pub: in};
    var HCO3_ec: molar {pub: in};
    var CO2_cy: molar {pub: in};
    var HCO3_cy: molar {pub: in};
    v_psCO2 = PSVCO2*(CO2_cy-CO2_ec);
    v_hydrCO2cy = X_CA*(kf_hydrCO2*CO2_cy-kb_hydrCO2*pow(10{dimensionless}, -pH_cy)*HCO3_cy);
    v_hydrCO2ec = 1{dimensionless}*(kf_hydrCO2*CO2_ec-kb_hydrCO2*pow(10{dimensionless}, -pH_ec)*HCO3_ec);
  enddef;

  def comp buffer_capacity as
    var bufcapmetab: molar {pub: out};
    var c0: molar {pub: in};
    var pH_cy: dimensionless {pub: in};
    var PCr: molar {pub: in};
    var Cr: molar {pub: in};
    var NAD: molar {pub: in};
    var NADH: molar {pub: in};
    var ATP: molar {pub: in};
    var ADP: molar {pub: in};
    var AMP: molar {pub: in};
    var Pi: molar {pub: in};
    var Gly: molar {pub: in};
    var G1P: molar {pub: in};
    var G6P: molar {pub: in};
    var F6P: molar {pub: in};
    var FBP: molar {pub: in};
    var DHAP: molar {pub: in};
    var G3P: molar {pub: in};
    var GAP: molar {pub: in};
    var BPG: molar {pub: in};
    var P3G: molar {pub: in};
    var P2G: molar {pub: in};
    var PEP: molar {pub: in};
    var PYR: molar {pub: in};
    var LAC: molar {pub: in};
    var ADK: molar_per_minute {pub: in};
    var CK: molar_per_minute {pub: in};
    var dNavg13DPGdH: per_molar {pub: in};
    var dNavg3PGdH: per_molar {pub: in};
    var dNavg2PGdH: per_molar {pub: in};
    var dNavgADPdH: per_molar {pub: in};
    var dNavgAMPdH: per_molar {pub: in};
    var dNavgATPdH: per_molar {pub: in};
    var dNavgCRdH: per_molar {pub: in};
    var dNavgDHAPdH: per_molar {pub: in};
    var dNavgF6PdH: per_molar {pub: in};
    var dNavgFDPdH: per_molar {pub: in};
    var dNavgG1PdH: per_molar {pub: in};
    var dNavgG3PdH: per_molar {pub: in};
    var dNavgG6PdH: per_molar {pub: in};
    var dNavgGAPdH: per_molar {pub: in};
    var dNavgLACdH: per_molar {pub: in};
    var dNavgPCRdH: per_molar {pub: in};
    var dNavgPEPdH: per_molar {pub: in};
    var dNavgPYRdH: per_molar {pub: in};
    var dNavgPidH: per_molar {pub: in};
    bufcapmetab = ln(10{dimensionless})*pow(10{dimensionless}, -pH_cy)*c0*(1{dimensionless}+dNavgPidH*Pi+dNavgATPdH*ATP+dNavgADPdH*ADP+dNavgAMPdH*AMP+dNavgPCRdH*PCr+dNavgCRdH*Cr+dNavgG1PdH*G1P+dNavgG6PdH*G6P+dNavgF6PdH*F6P+dNavgFDPdH*FBP+dNavgGAPdH*GAP+dNavgDHAPdH*DHAP+dNavgG3PdH*G3P+dNavg13DPGdH*BPG+dNavg3PGdH*P3G+dNavg2PGdH*P2G+dNavgPEPdH*PEP+dNavgPYRdH*PYR+dNavgLACdH*LAC);
  enddef;

  def comp proton_flux as
    var CKprtflux: molar_per_minute {pub: out};
    var glycprtflux: molar_per_minute {pub: out};
    var protons_consumed: molar_per_minute {pub: out};
    var pHODEterm1: per_minute {pub: out};
    var deltaH_ADK: dimensionless {pub: in};
    var deltaH_ALD: dimensionless {pub: in};
    var deltaH_CK: dimensionless {pub: in};
    var deltaH_ENOL: dimensionless {pub: in};
    var deltaH_G3PDH: dimensionless {pub: in};
    var deltaH_GAPDH: dimensionless {pub: in};
    var deltaH_GP: dimensionless {pub: in};
    var deltaH_LDH: dimensionless {pub: in};
    var deltaH_PFK: dimensionless {pub: in};
    var deltaH_PGI: dimensionless {pub: in};
    var deltaH_PGK: dimensionless {pub: in};
    var deltaH_PGLM: dimensionless {pub: in};
    var deltaH_PGM: dimensionless {pub: in};
    var deltaH_PK: dimensionless {pub: in};
    var deltaH_TPI: dimensionless {pub: in};
    var deltaH_ATPase: dimensionless {pub: in};
    var flux_GPa: molar_per_minute {pub: in};
    var flux_GPb: molar_per_minute {pub: in};
    var v_ALD: molar_per_minute {pub: in};
    var v_ENOL: molar_per_minute {pub: in};
    var v_G3PDH: molar_per_minute {pub: in};
    var v_GAPDH: molar_per_minute {pub: in};
    var v_LDH: molar_per_minute {pub: in};
    var v_PFK: molar_per_minute {pub: in};
    var v_PGI: molar_per_minute {pub: in};
    var v_PGK: molar_per_minute {pub: in};
    var v_PGLM: molar_per_minute {pub: in};
    var v_PGM: molar_per_minute {pub: in};
    var v_PK: molar_per_minute {pub: in};
    var v_TPI: molar_per_minute {pub: in};
    var v_MCT: molar_per_minute {pub: in};
    var v_hydrCO2cy: molar_per_minute {pub: in};
    var CK: molar_per_minute {pub: in};
    var ADK: molar_per_minute {pub: in};
    var ATPase: molar_per_minute {pub: in};
    var oxphos: molar_per_minute {pub: in};
    var bufcapfixed: molar {pub: in};
    var bufcapmetab: molar {pub: in};
    CKprtflux = deltaH_CK*(-CK);
    glycprtflux = deltaH_PGLM*v_PGLM+deltaH_GP*(flux_GPa+flux_GPb)+deltaH_PGI*v_PGI+deltaH_PFK*v_PFK+deltaH_ALD*v_ALD+deltaH_TPI*v_TPI+deltaH_GAPDH*v_GAPDH+deltaH_PGK*v_PGK+deltaH_PGM*v_PGM+deltaH_ENOL*v_ENOL+deltaH_PK*v_PK+deltaH_LDH*v_LDH+deltaH_G3PDH*v_G3PDH;
    protons_consumed = CKprtflux+glycprtflux+deltaH_ATPase*ATPase+(-deltaH_ATPase*oxphos)+deltaH_ADK*ADK-v_hydrCO2cy+v_MCT;
    pHODEterm1 = protons_consumed/(bufcapfixed+bufcapmetab);
  enddef;

  def comp differential_equations as
    var PCr: molar {init: 14.5e-3, pub: out};
    var Cr: molar {init: 0.0075, pub: out};
    var NAD: molar {init: 0.000406654344, pub: out};
    var NADH: molar {init: 0.0000000406654344, pub: out};
    var ATP: molar {init: 0.0055, pub: out};
    var ADP: molar {init: 1e-5, pub: out};
    var AMP: molar {init: 1e-8, pub: out};
    var Pi: molar {init: 0.0054, pub: out};
    var Gly: molar {init: 0.02, pub: out};
    var G1P: molar {init: 1e-9, pub: out};
    var G6P: molar {init: 1e-9, pub: out};
    var F6P: molar {init: 1e-9, pub: out};
    var FBP: molar {init: 1e-9, pub: out};
    var DHAP: molar {init: 1e-9, pub: out};
    var G3P: molar {init: 1e-9, pub: out};
    var GAP: molar {init: 1e-9, pub: out};
    var BPG: molar {init: 1e-9, pub: out};
    var P3G: molar {init: 1e-9, pub: out};
    var P2G: molar {init: 1e-9, pub: out};
    var PEP: molar {init: 1e-9, pub: out};
    var PYR: molar {init: 1e-9, pub: out};
    var LAC: molar {init: 1e-9, pub: out};
    var mg: molar {init: 1e-3, pub: out};
    var pH_calc: dimensionless {init: 7.14, pub: out};
    var LAC_ec: molar {init: 0, pub: out};
    var HCO3_cy: molar {init: 15e-3, pub: out};
    var CO2_cy: molar {init: 0.001564425, pub: out};
    var HCO3_ec: molar {init: 30e-3, pub: out};
    var CO2_ec: molar {init: 0.001564425, pub: out};
    var MOPS: molar {init: 0, pub: out};
    var MOPSH: molar {init: 0, pub: out};
    var pH_ec: dimensionless {init: 7.439766507222684, pub: out};
    var dPCrdt: molar_per_minute {pub: out};
    var dCrdt: molar_per_minute {pub: out};
    var dNADdt: molar_per_minute {pub: out};
    var dNADHdt: molar_per_minute {pub: out};
    var dATPdt: molar_per_minute {pub: out};
    var dADPdt: molar_per_minute {pub: out};
    var dAMPdt: molar_per_minute {pub: out};
    var dPidt: molar_per_minute {pub: out};
    var dglydt: molar_per_minute {pub: out};
    var dG1Pdt: molar_per_minute {pub: out};
    var dG6Pdt: molar_per_minute {pub: out};
    var dF6Pdt: molar_per_minute {pub: out};
    var dFBPdt: molar_per_minute {pub: out};
    var dDHAPdt: molar_per_minute {pub: out};
    var dG3Pdt: molar_per_minute {pub: out};
    var dGAPdt: molar_per_minute {pub: out};
    var dBPGdt: molar_per_minute {pub: out};
    var dP3Gdt: molar_per_minute {pub: out};
    var dP2Gdt: molar_per_minute {pub: out};
    var dPEPdt: molar_per_minute {pub: out};
    var dPYRdt: molar_per_minute {pub: out};
    var dLACdt: molar_per_minute {pub: out};
    var dmgdt: molar_per_minute {pub: out};
    var dpH_calcdt: per_minute {pub: out};
    var dLACecdt: molar_per_minute {pub: out};
    var dHCO3cydt: molar_per_minute {pub: out};
    var dCO2cydt: molar_per_minute {pub: out};
    var dHCO3ecdt: molar_per_minute {pub: out};
    var dCO2ecdt: molar_per_minute {pub: out};
    var MOPS_in: molar {pub: out};
    var MOPSH_in: molar {pub: out};
    var v_MOPSbuff: molar_per_minute {pub: out};
    var dMOPSdt: molar_per_minute {pub: out};
    var dMOPSHdt: molar_per_minute {pub: out};
    var dpHecdt: per_minute {pub: out};
    var time: minute {pub: in};
    var flux_GPa: molar_per_minute {pub: in};
    var flux_GPb: molar_per_minute {pub: in};
    var v_ALD: molar_per_minute {pub: in};
    var v_ENOL: molar_per_minute {pub: in};
    var v_G3PDH: molar_per_minute {pub: in};
    var v_GAPDH: molar_per_minute {pub: in};
    var v_LDH: molar_per_minute {pub: in};
    var v_PFK: molar_per_minute {pub: in};
    var v_PGI: molar_per_minute {pub: in};
    var v_PGK: molar_per_minute {pub: in};
    var v_PGLM: molar_per_minute {pub: in};
    var v_PGM: molar_per_minute {pub: in};
    var v_PK: molar_per_minute {pub: in};
    var v_TPI: molar_per_minute {pub: in};
    var v_MCT: molar_per_minute {pub: in};
    var CK: molar_per_minute {pub: in};
    var ADK: molar_per_minute {pub: in};
    var ATPase: molar_per_minute {pub: in};
    var oxphos: molar_per_minute {pub: in};
    var pHODEterm1: per_minute {pub: in};
    var v_psCO2: molar_per_minute {pub: in};
    var v_hydrCO2cy: molar_per_minute {pub: in};
    var v_hydrCO2ec: molar_per_minute {pub: in};
    var fluxCO2: molar_per_minute {pub: in};
    var Flow: liter_per_minute {pub: in};
    var V_cell: liter {pub: in};
    var V_ec: liter {pub: in};
    var pH_in: dimensionless {pub: in};
    var MOPSt: molar {pub: in};
    var CO2_in: molar {pub: in};
    var HCO3_in: molar {pub: in};
    var clamp: dimensionless {pub: in};
    ode(PCr, time) = dPCrdt;
    ode(Cr, time) = dCrdt;
    ode(NAD, time) = dNADdt;
    ode(NADH, time) = dNADHdt;
    ode(ATP, time) = dATPdt;
    ode(ADP, time) = dADPdt;
    ode(AMP, time) = dAMPdt;
    ode(Pi, time) = dPidt;
    ode(Gly, time) = dglydt;
    ode(G1P, time) = dG1Pdt;
    ode(G6P, time) = dG6Pdt;
    ode(F6P, time) = dF6Pdt;
    ode(FBP, time) = dFBPdt;
    ode(DHAP, time) = dDHAPdt;
    ode(G3P, time) = dG3Pdt;
    ode(GAP, time) = dGAPdt;
    ode(BPG, time) = dBPGdt;
    ode(P3G, time) = dP3Gdt;
    ode(P2G, time) = dP2Gdt;
    ode(PEP, time) = dPEPdt;
    ode(PYR, time) = dPYRdt;
    ode(LAC, time) = dLACdt;
    ode(mg, time) = dmgdt;
    ode(pH_calc, time) = dpH_calcdt;
    ode(LAC_ec, time) = dLACecdt;
    ode(HCO3_cy, time) = dHCO3cydt;
    ode(CO2_cy, time) = dCO2cydt;
    ode(HCO3_ec, time) = dHCO3ecdt;
    ode(CO2_ec, time) = dCO2ecdt;
    ode(MOPS, time) = dMOPSdt;
    ode(MOPSH, time) = dMOPSHdt;
    ode(pH_ec, time) = dpHecdt;
    dPCrdt = clamp*CK;
    dCrdt = clamp*(-CK);
    dNADdt = clamp*(-v_GAPDH-v_G3PDH+v_LDH);
    dNADHdt = clamp*(v_GAPDH+v_G3PDH-v_LDH);
    dATPdt = clamp*(-CK-ADK-v_PFK+v_PGK+v_PK-ATPase+oxphos);
    dADPdt = clamp*(CK+2{dimensionless}*ADK+v_PFK-v_PGK-v_PK+ATPase-oxphos);
    dAMPdt = clamp*(-ADK);
    dPidt = clamp*(-(flux_GPa+flux_GPb)-v_GAPDH+ATPase-oxphos);
    dglydt = clamp*(-(flux_GPa+flux_GPb));
    dG1Pdt = clamp*(flux_GPa+flux_GPb-v_PGLM);
    dG6Pdt = clamp*(v_PGLM-v_PGI);
    dF6Pdt = clamp*(v_PGI-v_PFK);
    dFBPdt = clamp*(v_PFK-v_ALD);
    dDHAPdt = clamp*(v_ALD+v_TPI+v_G3PDH);
    dG3Pdt = clamp*(-v_G3PDH);
    dGAPdt = clamp*(v_ALD-v_TPI-v_GAPDH);
    dBPGdt = clamp*(v_GAPDH-v_PGK);
    dP3Gdt = clamp*(v_PGK-v_PGM);
    dP2Gdt = clamp*(v_PGM-v_ENOL);
    dPEPdt = clamp*(v_ENOL-v_PK);
    dPYRdt = clamp*(v_PK-v_LDH);
    dLACdt = clamp*(v_LDH-v_MCT);
    dmgdt = clamp*0{molar_per_minute};
    dpH_calcdt = clamp*pHODEterm1;
    dLACecdt = clamp*(V_cell*v_MCT/V_ec-Flow*LAC_ec/V_ec);
    dHCO3cydt = clamp*v_hydrCO2cy;
    dCO2cydt = clamp*(fluxCO2-v_hydrCO2cy-v_psCO2);
    dHCO3ecdt = clamp*(Flow*(HCO3_in-HCO3_ec)/V_ec+v_hydrCO2ec);
    dCO2ecdt = clamp*(Flow*(CO2_in-CO2_ec)/V_ec+v_psCO2*V_cell/V_ec-v_hydrCO2ec);
    MOPS_in = MOPSt/2{dimensionless};
    MOPSH_in = MOPSt/2{dimensionless};
    v_MOPSbuff = 1e7{per_minute}*(pow(10{dimensionless}, -7.184{dimensionless})*MOPS-MOPSH*pow(10{dimensionless}, -pH_ec));
    dMOPSdt = clamp*(Flow*(MOPS_in-MOPS)/V_ec-v_MOPSbuff);
    dMOPSHdt = clamp*(Flow*(MOPSH_in-MOPSH)/V_ec+v_MOPSbuff);
    dpHecdt = clamp*(Flow*(pow(10{dimensionless}, -pH_in)-pow(10{dimensionless}, -pH_ec))/V_ec+v_hydrCO2ec/1{molar}+v_MOPSbuff/1{molar}+V_cell*v_MCT/(V_ec*1{molar}))/(-ln(10{dimensionless})*pow(10{dimensionless}, -pH_ec));
  enddef;
  def map between environment and equilibrium_constants for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and glycogen_phosphorylase_A for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and glycogen_phosphorylase_B for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PGLM for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PGI for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PFK for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and ALD for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and GAPDH for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PGM for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and ENOL for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and PK for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and LDH for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and lactate_transport for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and Passive_permeation_flux for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and buffer_capacity for
    vars pH_cy and pH_cy;
  enddef;
  def map between environment and differential_equations for
    vars time and time;
    vars pH_calc and pH_calc;
    vars pH_in and pH_in;
    vars MOPSt and MOPSt;
    vars CO2_in and CO2_in;
    vars HCO3_in and HCO3_in;
    vars clamp and clamp;
  enddef;
  def map between parameters and glycogen_phosphorylase_A for
    vars KgpA_glyf and KgpA_glyf;
    vars KgpA_glyb and KgpA_glyb;
    vars KgpA_igly and KgpA_igly;
    vars KgpA_pi and KgpA_pi;
    vars KgpA_ipi and KgpA_ipi;
    vars KgpA_g1p and KgpA_g1p;
    vars KgpA_ig1p and KgpA_ig1p;
    vars Vfgly and Vfgly;
    vars fracA and fracA;
  enddef;
  def map between parameters and glycogen_phosphorylase_B for
    vars nH and nH;
    vars Vfgly and Vfgly;
    vars Kgp_amp and Kgp_amp;
    vars KgpB_iglyf and KgpB_iglyf;
    vars KgpB_iglyb and KgpB_iglyb;
    vars KgpB_pi and KgpB_pi;
    vars KgpB_ipi and KgpB_ipi;
    vars KgpB_g1p and KgpB_g1p;
    vars KgpB_ig1p and KgpB_ig1p;
    vars fracA and fracA;
  enddef;
  def map between parameters and PGLM for
    vars Vffpglm and Vffpglm;
    vars Kpglm_g1p and Kpglm_g1p;
    vars Kpglm_g6p and Kpglm_g6p;
  enddef;
  def map between parameters and PGI for
    vars Vbbpgi and Vbbpgi;
    vars Kpgi_g6p and Kpgi_g6p;
    vars Kpgi_f6p and Kpgi_f6p;
  enddef;
  def map between parameters and PFK for
    vars Lo and Lo;
    vars d and d;
    vars Vffpfk and Vffpfk;
    vars Kpfk_fbp and Kpfk_fbp;
    vars Kpfk_adp and Kpfk_adp;
    vars Kpfk_f6p and Kpfk_f6p;
    vars Kpfk_atp and Kpfk_atp;
    vars Kpfk_fbpT and Kpfk_fbpT;
    vars Kpfk_adpT and Kpfk_adpT;
    vars Kpfk_f6pT and Kpfk_f6pT;
    vars Kpfk_atpT and Kpfk_atpT;
    vars Kmpfk and Kmpfk;
    vars Kpfki and Kpfki;
  enddef;
  def map between parameters and ALD for
    vars Vffald and Vffald;
    vars Kald_gap and Kald_gap;
    vars Kald_fbp and Kald_fbp;
    vars Kald_dhap and Kald_dhap;
  enddef;
  def map between parameters and TPI for
    vars Vfftpi and Vfftpi;
    vars Ktpi_dhap and Ktpi_dhap;
    vars Ktpi_gap and Ktpi_gap;
  enddef;
  def map between parameters and G3PDH for
    vars Vbbg3pdh and Vbbg3pdh;
    vars Kg3pdh_dhap and Kg3pdh_dhap;
    vars Kg3pdh_g3p and Kg3pdh_g3p;
    vars Kg3pdh_nadh and Kg3pdh_nadh;
    vars Kg3pdh_nad and Kg3pdh_nad;
  enddef;
  def map between parameters and GAPDH for
    vars Vffgad and Vffgad;
    vars Kgapdh_bpg and Kgapdh_bpg;
    vars Kgapdh_gap and Kgapdh_gap;
    vars Kgapdh_pi and Kgapdh_pi;
    vars Kgapdh_nadh and Kgapdh_nadh;
    vars Kgapdh_nad and Kgapdh_nad;
  enddef;
  def map between parameters and PGK for
    vars Vbbpgk and Vbbpgk;
    vars Kpgk_bpg and Kpgk_bpg;
    vars Kpgk_3pg and Kpgk_3pg;
    vars Kpgk_atp and Kpgk_atp;
    vars Kpgk_adp and Kpgk_adp;
  enddef;
  def map between parameters and PGM for
    vars Vffpgm and Vffpgm;
    vars Kpgm_2pg and Kpgm_2pg;
    vars Kpgm_3pg and Kpgm_3pg;
  enddef;
  def map between parameters and ENOL for
    vars Vffen and Vffen;
    vars Ken_2pg and Ken_2pg;
    vars Ken_pep and Ken_pep;
  enddef;
  def map between parameters and PK for
    vars Vffpk and Vffpk;
    vars Kpk_atp and Kpk_atp;
    vars Kpk_adp and Kpk_adp;
    vars Kpk_pep and Kpk_pep;
    vars Kpk_pyr and Kpk_pyr;
  enddef;
  def map between parameters and LDH for
    vars Vffldh and Vffldh;
    vars Kldh_lac and Kldh_lac;
    vars Kldh_pyr and Kldh_pyr;
    vars Kldh_nad and Kldh_nad;
    vars Kldh_nadh and Kldh_nadh;
  enddef;
  def map between parameters and creatine_kinase for
    vars VforCK and VforCK;
    vars Kck_iatp and Kck_iatp;
    vars Kck_iadp and Kck_iadp;
    vars Kck_pcr and Kck_pcr;
    vars Kck_ipcr and Kck_ipcr;
    vars Kck_cr and Kck_cr;
  enddef;
  def map between parameters and adenylate_kinase for
    vars Vfadk and Vfadk;
    vars Kadk_atp and Kadk_atp;
    vars Kadk_adp and Kadk_adp;
    vars Kadk_amp and Kadk_amp;
  enddef;
  def map between parameters and ATPase for
    vars kut and kut;
  enddef;
  def map between parameters and OXPHOS for
    vars VmaxOxPhos and VmaxOxPhos;
    vars nnHH and nnHH;
    vars Kmadp and Kmadp;
  enddef;
  def map between parameters and lactate_transport for
    vars pKmct1 and pKmct1;
    vars Vmax_MCT and Vmax_MCT;
    vars nnHH and nnHH;
    vars Klac1 and Klac1;
  enddef;
  def map between parameters and Passive_permeation_flux for
    vars X_CA and X_CA;
    vars PSVCO2 and PSVCO2;
    vars kf_hydrCO2 and kf_hydrCO2;
    vars kb_hydrCO2 and kb_hydrCO2;
  enddef;
  def map between parameters and proton_flux for
    vars bufcapfixed and bufcapfixed;
  enddef;
  def map between parameters and differential_equations for
    vars Flow and Flow;
    vars V_cell and V_cell;
    vars V_ec and V_ec;
  enddef;
  def map between glycogen_phosphorylase_A and equilibrium_constants for
    vars Kapp_GP and Kapp_GP;
  enddef;
  def map between glycogen_phosphorylase_A and differential_equations for
    vars G1P and G1P;
    vars Pi and Pi;
    vars Gly and Gly;
    vars flux_GPa and flux_GPa;
  enddef;
  def map between glycogen_phosphorylase_B and equilibrium_constants for
    vars Kapp_GP and Kapp_GP;
  enddef;
  def map between glycogen_phosphorylase_B and differential_equations for
    vars G1P and G1P;
    vars Pi and Pi;
    vars Gly and Gly;
    vars AMP and AMP;
    vars flux_GPb and flux_GPb;
  enddef;
  def map between PGLM and equilibrium_constants for
    vars Kapp_PGLM and Kapp_PGLM;
  enddef;
  def map between PGLM and differential_equations for
    vars G1P and G1P;
    vars G6P and G6P;
    vars v_PGLM and v_PGLM;
  enddef;
  def map between PGI and equilibrium_constants for
    vars Kapp_PGI and Kapp_PGI;
  enddef;
  def map between PGI and differential_equations for
    vars F6P and F6P;
    vars G6P and G6P;
    vars v_PGI and v_PGI;
  enddef;
  def map between PFK and equilibrium_constants for
    vars Kapp_PFK and Kapp_PFK;
  enddef;
  def map between PFK and differential_equations for
    vars F6P and F6P;
    vars FBP and FBP;
    vars AMP and AMP;
    vars ADP and ADP;
    vars ATP and ATP;
    vars v_PFK and v_PFK;
  enddef;
  def map between ALD and equilibrium_constants for
    vars Kapp_ALD and Kapp_ALD;
  enddef;
  def map between ALD and differential_equations for
    vars DHAP and DHAP;
    vars FBP and FBP;
    vars GAP and GAP;
    vars v_ALD and v_ALD;
  enddef;
  def map between TPI and equilibrium_constants for
    vars Kapp_TPI and Kapp_TPI;
  enddef;
  def map between TPI and differential_equations for
    vars DHAP and DHAP;
    vars GAP and GAP;
    vars v_TPI and v_TPI;
  enddef;
  def map between G3PDH and equilibrium_constants for
    vars Kapp_G3PDH and Kapp_G3PDH;
  enddef;
  def map between G3PDH and differential_equations for
    vars DHAP and DHAP;
    vars G3P and G3P;
    vars NAD and NAD;
    vars NADH and NADH;
    vars v_G3PDH and v_G3PDH;
  enddef;
  def map between GAPDH and equilibrium_constants for
    vars Kapp_GAPDH and Kapp_GAPDH;
  enddef;
  def map between GAPDH and differential_equations for
    vars BPG and BPG;
    vars GAP and GAP;
    vars NAD and NAD;
    vars NADH and NADH;
    vars Pi and Pi;
    vars v_GAPDH and v_GAPDH;
  enddef;
  def map between PGK and equilibrium_constants for
    vars Kapp_PGK and Kapp_PGK;
  enddef;
  def map between PGK and differential_equations for
    vars NAD and NAD;
    vars BPG and BPG;
    vars P3G and P3G;
    vars ADP and ADP;
    vars ATP and ATP;
    vars v_PGK and v_PGK;
  enddef;
  def map between PGM and equilibrium_constants for
    vars Kapp_PGM and Kapp_PGM;
  enddef;
  def map between PGM and differential_equations for
    vars P2G and P2G;
    vars P3G and P3G;
    vars v_PGM and v_PGM;
  enddef;
  def map between ENOL and equilibrium_constants for
    vars Kapp_ENOL and Kapp_ENOL;
  enddef;
  def map between ENOL and differential_equations for
    vars P2G and P2G;
    vars PEP and PEP;
    vars v_ENOL and v_ENOL;
  enddef;
  def map between PK and equilibrium_constants for
    vars Kapp_PK and Kapp_PK;
  enddef;
  def map between PK and differential_equations for
    vars PYR and PYR;
    vars PEP and PEP;
    vars ADP and ADP;
    vars ATP and ATP;
    vars v_PK and v_PK;
  enddef;
  def map between LDH and equilibrium_constants for
    vars Kapp_LDH and Kapp_LDH;
  enddef;
  def map between LDH and differential_equations for
    vars LAC and LAC;
    vars PYR and PYR;
    vars NAD and NAD;
    vars NADH and NADH;
    vars v_LDH and v_LDH;
  enddef;
  def map between ATPase and differential_equations for
    vars ATP and ATP;
    vars ATPase and ATPase;
  enddef;
  def map between OXPHOS and CO2_generation_transport for
    vars oxphos and oxphos;
  enddef;
  def map between OXPHOS and differential_equations for
    vars ADP and ADP;
    vars oxphos and oxphos;
  enddef;
  def map between lactate_transport and differential_equations for
    vars v_MCT and v_MCT;
    vars LAC and LAC;
    vars LAC_ec and LAC_ec;
    vars pH_ec and pH_ec;
  enddef;
  def map between CO2_generation_transport and differential_equations for
    vars fluxCO2 and fluxCO2;
  enddef;
  def map between creatine_kinase and equilibrium_constants for
    vars Kapp_CK and Kapp_CK;
  enddef;
  def map between creatine_kinase and differential_equations for
    vars ATP and ATP;
    vars ADP and ADP;
    vars Cr and Cr;
    vars PCr and PCr;
    vars CK and CK;
  enddef;
  def map between adenylate_kinase and equilibrium_constants for
    vars Kapp_ADK and Kapp_ADK;
  enddef;
  def map between adenylate_kinase and differential_equations for
    vars ATP and ATP;
    vars ADP and ADP;
    vars AMP and AMP;
    vars ADK and ADK;
  enddef;
  def map between Passive_permeation_flux and differential_equations for
    vars CO2_cy and CO2_cy;
    vars HCO3_cy and HCO3_cy;
    vars CO2_ec and CO2_ec;
    vars HCO3_ec and HCO3_ec;
    vars pH_ec and pH_ec;
    vars v_psCO2 and v_psCO2;
    vars v_hydrCO2cy and v_hydrCO2cy;
    vars v_hydrCO2ec and v_hydrCO2ec;
  enddef;
  def map between buffer_capacity and creatine_kinase for
    vars CK and CK;
  enddef;
  def map between buffer_capacity and adenylate_kinase for
    vars ADK and ADK;
  enddef;
  def map between buffer_capacity and equilibrium_constants for
    vars c0 and c0;
    vars dNavg13DPGdH and dNavg13DPGdH;
    vars dNavg3PGdH and dNavg3PGdH;
    vars dNavg2PGdH and dNavg2PGdH;
    vars dNavgADPdH and dNavgADPdH;
    vars dNavgAMPdH and dNavgAMPdH;
    vars dNavgATPdH and dNavgATPdH;
    vars dNavgCRdH and dNavgCRdH;
    vars dNavgDHAPdH and dNavgDHAPdH;
    vars dNavgF6PdH and dNavgF6PdH;
    vars dNavgFDPdH and dNavgFDPdH;
    vars dNavgG1PdH and dNavgG1PdH;
    vars dNavgG3PdH and dNavgG3PdH;
    vars dNavgG6PdH and dNavgG6PdH;
    vars dNavgGAPdH and dNavgGAPdH;
    vars dNavgLACdH and dNavgLACdH;
    vars dNavgPCRdH and dNavgPCRdH;
    vars dNavgPEPdH and dNavgPEPdH;
    vars dNavgPYRdH and dNavgPYRdH;
    vars dNavgPidH and dNavgPidH;
  enddef;
  def map between buffer_capacity and proton_flux for
    vars bufcapmetab and bufcapmetab;
  enddef;
  def map between proton_flux and equilibrium_constants for
    vars deltaH_ADK and deltaH_ADK;
    vars deltaH_ALD and deltaH_ALD;
    vars deltaH_CK and deltaH_CK;
    vars deltaH_ENOL and deltaH_ENOL;
    vars deltaH_G3PDH and deltaH_G3PDH;
    vars deltaH_GAPDH and deltaH_GAPDH;
    vars deltaH_GP and deltaH_GP;
    vars deltaH_LDH and deltaH_LDH;
    vars deltaH_PFK and deltaH_PFK;
    vars deltaH_PGI and deltaH_PGI;
    vars deltaH_PGK and deltaH_PGK;
    vars deltaH_PGLM and deltaH_PGLM;
    vars deltaH_PGM and deltaH_PGM;
    vars deltaH_PK and deltaH_PK;
    vars deltaH_TPI and deltaH_TPI;
    vars deltaH_ATPase and deltaH_ATPase;
  enddef;
  def map between proton_flux and glycogen_phosphorylase_A for
    vars flux_GPa and flux_GPa;
  enddef;
  def map between proton_flux and glycogen_phosphorylase_B for
    vars flux_GPb and flux_GPb;
  enddef;
  def map between proton_flux and ALD for
    vars v_ALD and v_ALD;
  enddef;
  def map between proton_flux and ENOL for
    vars v_ENOL and v_ENOL;
  enddef;
  def map between proton_flux and G3PDH for
    vars v_G3PDH and v_G3PDH;
  enddef;
  def map between proton_flux and GAPDH for
    vars v_GAPDH and v_GAPDH;
  enddef;
  def map between proton_flux and LDH for
    vars v_LDH and v_LDH;
  enddef;
  def map between proton_flux and PFK for
    vars v_PFK and v_PFK;
  enddef;
  def map between proton_flux and PGI for
    vars v_PGI and v_PGI;
  enddef;
  def map between proton_flux and PGK for
    vars v_PGK and v_PGK;
  enddef;
  def map between proton_flux and PGLM for
    vars v_PGLM and v_PGLM;
  enddef;
  def map between proton_flux and PGM for
    vars v_PGM and v_PGM;
  enddef;
  def map between proton_flux and PK for
    vars v_PK and v_PK;
  enddef;
  def map between proton_flux and TPI for
    vars v_TPI and v_TPI;
  enddef;
  def map between proton_flux and lactate_transport for
    vars v_MCT and v_MCT;
  enddef;
  def map between proton_flux and ATPase for
    vars ATPase and ATPase;
  enddef;
  def map between proton_flux and OXPHOS for
    vars oxphos and oxphos;
  enddef;
  def map between proton_flux and Passive_permeation_flux for
    vars v_hydrCO2cy and v_hydrCO2cy;
  enddef;
  def map between proton_flux and creatine_kinase for
    vars CK and CK;
  enddef;
  def map between proton_flux and adenylate_kinase for
    vars ADK and ADK;
  enddef;
  def map between buffer_capacity and differential_equations for
    vars PCr and PCr;
    vars Cr and Cr;
    vars NAD and NAD;
    vars NADH and NADH;
    vars ATP and ATP;
    vars ADP and ADP;
    vars AMP and AMP;
    vars Pi and Pi;
    vars Gly and Gly;
    vars G1P and G1P;
    vars G6P and G6P;
    vars F6P and F6P;
    vars FBP and FBP;
    vars DHAP and DHAP;
    vars G3P and G3P;
    vars GAP and GAP;
    vars BPG and BPG;
    vars P3G and P3G;
    vars P2G and P2G;
    vars PEP and PEP;
    vars PYR and PYR;
    vars LAC and LAC;
  enddef;
  def map between proton_flux and differential_equations for
    vars pHODEterm1 and pHODEterm1;
  enddef;
  def map between differential_equations and equilibrium_constants for
    vars mg and mg;
  enddef;
  // Keyword(s)
enddef;
