// This CellML file was generated on 4/05/2010 at 9:54:38 at a.m. using:
//
// COR (0.9.31.1371)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2003-08-18
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Hoefnagel et al's 2002 mathematical model of pyruvate distribution in lactic acid bacteria.
// comment: FN Catherine Lloyd; This is the CellML description of Hoefnagel et al's 2002 mathematical model of pyruvate distribution in lactic acid bacteria.
// reference: subject_type keyword; metabolic control; pyruvate; metabolism
// reference: Pubmed_id 11932446; Given Marcel; Family Hoefnagel; Other H; Other N; Given Marjo; Family Starrenburg; Other C; Other J; Given Dirk; Family Martens; Other E; Given Jeroen; Family Hugenholtz; Given Michiel; Family Kleerebezem; Given Iris; Family Van Swam; Other I; Given Roger; Family Bongers; Given Hans; Family Westerhoff; Other V; Given Jacky; Family Snoep; Other L; title Metabolic engineering of lactic acid bacteria, the combined approach: kinetic modelling, metabolic control and experimental analysis; volume 148; first_page 1003; title Microbiology; W3CDTF 2002-04; last_page 1013
def model hoefnagel_2002 as
  // Metabolic Engineering of Lactococcus lactis
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model runs in OpenCell and COR and the units are consistent throughout. The output is similar to the original model simulation, but differs for unknown reasons. The CellML model translation is based on the the original model code which is available online at the JWS website.
  //
  // Model Structure
  //
  // ABSTRACT: Everyone who has ever tried to radically change metabolic fluxes knows that it is often harder to determine which enzymes have to be modified than it is to actually implement these changes. In the more traditional genetic engineering approaches 'bottle-necks' are pinpointed using qualitative, intuitive approaches, but the alleviation of suspected 'rate-limiting' steps has not often been successful. Here the authors demonstrate that a model of pyruvate distribution in Lactococcus lactis based on enzyme kinetics in combination with metabolic control analysis clearly indicates the key control points in the flux to acetoin and diacetyl, important flavour compounds. The model presented here (available at http://jjj.biochem.sun.ac.za/wcfs.html) showed that the enzymes with the greatest effect on this flux resided outside the acetolactate synthase branch itself. Experiments confirmed the predictions of the model, i.e. knocking out lactate dehydrogenase and overexpressing NADH oxidase increased the flux through the acetolactate synthase branch from 0 to 75% of measured product formation rates.
  //
  // Metabolic engineering of lactic acid bacteria, the combined approach: kinetic modelling, metabolic control and experimental analysis, Marcel H.N. Hoefnagel, Marjo J.C. Starrenburg, Dirk E. Martens, Jeroen Hugenholtz, Michiel Kleerebezem, Iris I. Van Swam, Roger Bongers, Hans V. Westerhoff, and Jacky L. Snoep, 2002, Microbiology, 148, 1003-1013. PubMed ID: 11932446 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=11932446&dopt=Abstract)
  //
  // reaction diagram
  //
  // A schematic diagram of the reactions included in the model to describe the distribution of carbon from pyruvate in L. lactis.
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit flux as
    unit millimolar;
    unit minute {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp PYR as
    var PYR: millimolar {init: 1, pub: out};
    var V_GLYC: flux {pub: in};
    var V_LDH: flux {pub: in};
    var V_PDH: flux {pub: in};
    var V_ALS: flux {pub: in};
    var time: minute {pub: in};
    ode(PYR, time) = V_GLYC-(V_LDH+V_PDH+V_ALS);
  enddef;

  def comp ACP as
    var ACP: millimolar {init: 0.03145, pub: out};
    var V_PTA: flux {pub: in};
    var V_ACK: flux {pub: in};
    var time: minute {pub: in};
    ode(ACP, time) = V_PTA-V_ACK;
  enddef;

  def comp ACAL as
    var ACAL: millimolar {init: 0.11, pub: out};
    var V_ACALDH: flux {pub: in};
    var V_ADH: flux {pub: in};
    var time: minute {pub: in};
    ode(ACAL, time) = V_ACALDH-V_ADH;
  enddef;

  def comp ACLAC as
    var ACLAC: millimolar {init: 1e-5, pub: out};
    var V_ALS: flux {pub: in};
    var V_ALDC: flux {pub: in};
    var V_NEALC: flux {pub: in};
    var time: minute {pub: in};
    ode(ACLAC, time) = 0.5{dimensionless}*V_ALS-(V_ALDC+V_NEALC);
  enddef;

  def comp ACET as
    var ACET: millimolar {init: 1e-5, pub: out};
    var V_ALDC: flux {pub: in};
    var V_NEALC: flux {pub: in};
    var V_ACETDH: flux {pub: in};
    var V_ACETEFF: flux {pub: in};
    var time: minute {pub: in};
    ode(ACET, time) = V_ALDC+V_NEALC-(V_ACETDH+V_ACETEFF);
  enddef;

  def comp ATP as
    var ATP: millimolar {init: 0.1, pub: out};
    var V_GLYC: flux {pub: in};
    var V_ACK: flux {pub: in};
    var V_ATPase: flux {pub: in};
    var time: minute {pub: in};
    ode(ATP, time) = V_GLYC+V_ACK-V_ATPase;
  enddef;

  def comp ADP as
    var ADP: millimolar {pub: out};
    var A_tot: millimolar {init: 5};
    var ATP: millimolar {pub: in};
    ADP = A_tot-ATP;
  enddef;

  def comp NADH as
    var NADH: millimolar {init: 3.67, pub: out};
    var V_GLYC: flux {pub: in};
    var V_PDH: flux {pub: in};
    var V_LDH: flux {pub: in};
    var V_ACALDH: flux {pub: in};
    var V_ADH: flux {pub: in};
    var V_ACETDH: flux {pub: in};
    var V_NOX: flux {pub: in};
    var time: minute {pub: in};
    ode(NADH, time) = V_GLYC+V_PDH-(V_LDH+V_ACALDH+V_ADH+V_ACETDH+V_NOX);
  enddef;

  def comp NAD as
    var NAD: millimolar {pub: out};
    var NAD_tot: millimolar {init: 10};
    var NADH: millimolar {pub: in};
    NAD = NAD_tot-NADH;
  enddef;

  def comp ACCOA as
    var ACCOA: millimolar {init: 0.11, pub: out};
    var V_PDH: flux {pub: in};
    var V_ACALDH: flux {pub: in};
    var V_PTA: flux {pub: in};
    var time: minute {pub: in};
    ode(ACCOA, time) = V_PDH-(V_ACALDH+V_PTA);
  enddef;

  def comp COA as
    var COA: millimolar {pub: out};
    var C_tot: millimolar {init: 1};
    var ACCOA: millimolar {pub: in};
    COA = C_tot-ACCOA;
  enddef;

  def comp AC as
    var AC: millimolar {init: 0.01, pub: out};
  enddef;

  def comp BUT as
    var BUT: millimolar {init: 0.01, pub: out};
  enddef;

  def comp ETOH as
    var ETOH: millimolar {init: 0.1, pub: out};
  enddef;

  def comp GLC as
    var GLC: millimolar {init: 15, pub: out};
  enddef;

  def comp LAC as
    var LAC: millimolar {init: 0.1, pub: out};
  enddef;

  def comp O as
    var O: millimolar {init: 0.2, pub: out};
  enddef;

  def comp P as
    var P: millimolar {init: 10, pub: out};
  enddef;

  def comp V_GLYC as
    var V_GLYC: flux {pub: out};
    var V_GLYC_temp: flux {pub: out};
    var GLC: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var PYR: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var Km_GLC: millimolar {init: 0.1};
    var Km_NAD: millimolar {init: 0.1412};
    var Km_ADP: millimolar {init: 0.04699};
    var Km_PYR: millimolar {init: 2.5};
    var Km_NADH: millimolar {init: 0.08999};
    var Km_ATP: millimolar {init: 0.01867};
    var V_GLYC_max: flux {init: 2397};
    V_GLYC = sel
      case V_GLYC_temp >= 0{flux}:
        V_GLYC_temp;
      otherwise:
        V_GLYC_temp;
    endsel;
    V_GLYC_temp = V_GLYC_max*GLC/Km_GLC*NAD/Km_NAD*ADP/Km_ADP/((1{dimensionless}+GLC/Km_GLC+PYR/Km_PYR)*(1{dimensionless}+NAD/Km_NAD+NADH/Km_NADH)*(1{dimensionless}+ADP/Km_ADP+ATP/Km_ATP));
  enddef;

  def comp V_LDH as
    var V_LDH: flux {pub: out};
    var V_LDH_temp: flux {pub: out};
    var LAC: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var PYR: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var Keq: dimensionless {init: 21120.69};
    var Km_LAC: millimolar {init: 100};
    var Km_NAD: millimolar {init: 2.4};
    var Km_PYR: millimolar {init: 1.5};
    var Km_NADH: millimolar {init: 0.08};
    var V_LDH_max: flux {init: 5118};
    V_LDH = sel
      case V_LDH_temp >= 0{flux}:
        V_LDH_temp;
      otherwise:
        V_LDH_temp;
    endsel;
    V_LDH_temp = V_LDH_max/(Km_PYR*Km_NADH)*(PYR*NADH-LAC*NAD/Keq)/((1{dimensionless}+PYR/Km_PYR+LAC/Km_LAC)*(1{dimensionless}+NADH/Km_NADH+NAD/Km_NAD));
  enddef;

  def comp V_PDH as
    var V_PDH: flux {pub: out};
    var V_PDH_temp: flux {pub: out};
    var NAD: millimolar {pub: in};
    var COA: millimolar {pub: in};
    var ACCOA: millimolar {pub: in};
    var PYR: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var Ki: dimensionless {init: 46.4159};
    var Km_NAD: millimolar {init: 0.4};
    var Km_COA: millimolar {init: 0.014};
    var Km_PYR: millimolar {init: 1};
    var Km_NADH: millimolar {init: 0.1};
    var Km_ACCOA: millimolar {init: 0.008};
    var V_PDH_max: flux {init: 259};
    V_PDH = sel
      case V_PDH_temp >= 0{flux}:
        V_PDH_temp;
      otherwise:
        V_PDH_temp;
    endsel;
    V_PDH_temp = V_PDH_max/(1{dimensionless}+Ki*NADH/NAD)*PYR/Km_PYR*NAD/Km_NAD*COA/Km_COA/((1{dimensionless}+PYR/Km_PYR)*(1{dimensionless}+NAD/Km_NAD+NADH/Km_NADH)*(1{dimensionless}+COA/Km_COA+ACCOA/Km_ACCOA));
  enddef;

  def comp V_PTA as
    var V_PTA: flux {pub: out};
    var V_PTA_temp: flux {pub: out};
    var P: millimolar {pub: in};
    var COA: millimolar {pub: in};
    var ACCOA: millimolar {pub: in};
    var ACP: millimolar {pub: in};
    var Keq: dimensionless {init: 0.0065};
    var Km_P: millimolar {init: 2.6};
    var Ki_P: millimolar {init: 2.6};
    var Ki_COA: millimolar {init: 0.029};
    var Km_ACP: millimolar {init: 0.7};
    var Ki_ACP: millimolar {init: 0.2};
    var Ki_ACCOA: millimolar {init: 0.2};
    var V_PTA_max: flux {init: 42};
    V_PTA = sel
      case V_PTA_temp >= 0{flux}:
        V_PTA_temp;
      otherwise:
        V_PTA_temp;
    endsel;
    V_PTA_temp = V_PTA_max/(Ki_ACCOA*Km_P)*(ACCOA*P-ACP*COA/Keq)/(1{dimensionless}+ACCOA/Ki_ACCOA+P/Ki_P+ACP/Ki_ACP+COA/Ki_COA+ACCOA*P/(Ki_ACCOA*Km_P)+ACP*COA/(Km_ACP*Ki_COA));
  enddef;

  def comp V_ACK as
    var V_ACK: flux {pub: out};
    var V_ACK_temp: flux {pub: out};
    var AC: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var ACP: millimolar {pub: in};
    var Keq: dimensionless {init: 174.217};
    var Km_AC: millimolar {init: 7};
    var Km_ATP: millimolar {init: 0.07};
    var Km_ADP: millimolar {init: 0.5};
    var Km_ACP: millimolar {init: 0.16};
    var V_ACK_max: flux {init: 2700};
    V_ACK = sel
      case V_ACK_temp >= 0{flux}:
        V_ACK_temp;
      otherwise:
        V_ACK_temp;
    endsel;
    V_ACK_temp = V_ACK_max/(Km_ADP*Km_ACP)*(ACP*ADP-AC*ATP/Keq)/((1{dimensionless}+ACP/Km_ACP+AC/Km_AC)*(1{dimensionless}+ADP/Km_ADP+ATP/Km_ATP));
  enddef;

  def comp V_ACALDH as
    var V_ACALDH: flux {pub: out};
    var V_ACALDH_temp: flux {pub: out};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var COA: millimolar {pub: in};
    var ACCOA: millimolar {pub: in};
    var ACAL: millimolar {pub: in};
    var Keq: millimolar {init: 1};
    var Km_NAD: millimolar {init: 0.08};
    var Km_NADH: millimolar {init: 0.025};
    var Km_COA: millimolar {init: 0.008};
    var Km_ACCOA: millimolar {init: 0.007};
    var Km_ACAL: millimolar {init: 10};
    var V_ACALDH_max: flux {init: 97};
    V_ACALDH = sel
      case V_ACALDH_temp >= 0{flux}:
        V_ACALDH_temp;
      otherwise:
        V_ACALDH_temp;
    endsel;
    V_ACALDH_temp = V_ACALDH_max/(Km_ACCOA*Km_NADH)*(ACCOA*NADH-NAD*COA*ACAL/Keq)/((1{dimensionless}+NAD/Km_NAD+NADH/Km_NADH)*(1{dimensionless}+ACCOA/Km_ACCOA+COA/Km_COA)*(1{dimensionless}+ACAL/Km_ACAL));
  enddef;

  def comp V_ADH as
    var V_ADH: flux {pub: out};
    var V_ADH_temp: flux {pub: out};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var ETOH: millimolar {pub: in};
    var ACAL: millimolar {pub: in};
    var Keq: dimensionless {init: 12354.9};
    var Km_NAD: millimolar {init: 0.08};
    var Km_NADH: millimolar {init: 0.05};
    var Km_ETOH: millimolar {init: 1};
    var Km_ACAL: millimolar {init: 0.03};
    var V_ADH_max: flux {init: 162};
    V_ADH = sel
      case V_ADH_temp >= 0{flux}:
        V_ADH_temp;
      otherwise:
        V_ADH_temp;
    endsel;
    V_ADH_temp = V_ADH_max/(Km_ACAL*Km_NADH)*(ACAL*NADH-ETOH*NAD/Keq)/((1{dimensionless}+NAD/Km_NAD+NADH/Km_NADH)*(1{dimensionless}+ACAL/Km_ACAL+ETOH/Km_ETOH));
  enddef;

  def comp V_ALS as
    var V_ALS: flux {pub: out};
    var V_ALS_temp: flux {pub: out};
    var ACLAC: millimolar {pub: in};
    var PYR: millimolar {pub: in};
    var N: dimensionless {init: 2.4};
    var Keq: dimensionless {init: 9e12};
    var Km_ACLAC: millimolar {init: 100};
    var Km_PYR: millimolar {init: 50};
    var V_ALS_max: flux {init: 600};
    V_ALS = sel
      case V_ALS_temp >= 0{flux}:
        V_ALS_temp;
      otherwise:
        V_ALS_temp;
    endsel;
    V_ALS_temp = V_ALS_max*PYR/Km_PYR*(1{dimensionless}-ACLAC/(PYR*Keq))*pow(PYR/Km_PYR+ACLAC/Km_ACLAC, N-1{dimensionless})/(1{dimensionless}+pow(PYR/Km_PYR+ACLAC/Km_ACLAC, N));
  enddef;

  def comp V_ALDC as
    var V_ALDC: flux {pub: out};
    var V_ALDC_temp: flux {pub: out};
    var ACLAC: millimolar {pub: in};
    var ACET: millimolar {pub: in};
    var Km_ACLAC: millimolar {init: 10};
    var Km_ACET: millimolar {init: 100};
    var V_ALDC_max: flux {init: 106};
    V_ALDC = sel
      case V_ALDC_temp >= 0{flux}:
        V_ALDC_temp;
      otherwise:
        V_ALDC_temp;
    endsel;
    V_ALDC_temp = V_ALDC_max*ACLAC/Km_ACLAC/(1{dimensionless}+ACLAC/Km_ACLAC+ACET/Km_ACET);
  enddef;

  def comp V_ACETEFF as
    var V_ACETEFF: flux {pub: out};
    var V_ACETEFF_temp: flux {pub: out};
    var ACET: millimolar {pub: in};
    var Km_ACET: millimolar {init: 5};
    var V_ACETEFF_max: flux {init: 200};
    V_ACETEFF = sel
      case V_ACETEFF_temp >= 0{flux}:
        V_ACETEFF_temp;
      otherwise:
        V_ACETEFF_temp;
    endsel;
    V_ACETEFF_temp = V_ACETEFF_max*ACET/Km_ACET/(1{dimensionless}+ACET/Km_ACET);
  enddef;

  def comp V_ACETDH as
    var V_ACETDH: flux {pub: out};
    var V_ACETDH_temp: flux {pub: out};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var BUT: millimolar {pub: in};
    var ACET: millimolar {pub: in};
    var Keq: dimensionless {init: 1400};
    var Km_NAD: millimolar {init: 0.16};
    var Km_NADH: millimolar {init: 0.02};
    var Km_BUT: millimolar {init: 2.6};
    var Km_ACET: millimolar {init: 0.06};
    var V_ACETDH_max: flux {init: 105};
    V_ACETDH = sel
      case V_ACETDH_temp >= 0{flux}:
        V_ACETDH_temp;
      otherwise:
        V_ACETDH_temp;
    endsel;
    V_ACETDH_temp = V_ACETDH_max/(Km_ACET*Km_NADH)*(ACET*NADH-BUT*NAD/Keq)/((1{dimensionless}+ACET/Km_ACET+BUT/Km_BUT)*(1{dimensionless}+NADH/Km_NADH+NAD/Km_NAD));
  enddef;

  def comp V_ATPase as
    var V_ATPase: flux {pub: out};
    var V_ATPase_temp: flux {pub: out};
    var ADP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var N: dimensionless {init: 2.58};
    var Km_ATP: dimensionless {init: 6.196};
    var V_ATPase_max: flux {init: 900};
    V_ATPase = sel
      case V_ATPase_temp >= 0{flux}:
        V_ATPase_temp;
      otherwise:
        V_ATPase_temp;
    endsel;
    V_ATPase_temp = V_ATPase_max*pow(ATP/ADP, N)/(pow(Km_ATP, N)+pow(ATP/ADP, N));
  enddef;

  def comp V_NOX as
    var V_NOX: flux {pub: out};
    var V_NOX_temp: flux {pub: out};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var O: millimolar {pub: in};
    var Km_NAD: millimolar {init: 1};
    var Km_NADH: millimolar {init: 0.041};
    var Km_O: millimolar {init: 0.2};
    var V_NOX_max: flux {init: 118};
    V_NOX = sel
      case V_NOX_temp >= 0{flux}:
        V_NOX_temp;
      otherwise:
        V_NOX_temp;
    endsel;
    V_NOX_temp = V_NOX_max*NADH*O/(Km_NADH*Km_O)/((1{dimensionless}+NADH/Km_NADH+NAD/Km_NAD)*(1{dimensionless}+O/Km_O));
  enddef;

  def comp V_NEALC as
    var V_NEALC: flux {pub: out};
    var ACLAC: millimolar {pub: in};
    var k: first_order_rate_constant {init: 0.0003};
    V_NEALC = k*ACLAC;
  enddef;
  def map between PYR and V_GLYC for
    vars PYR and PYR;
    vars V_GLYC and V_GLYC;
  enddef;
  def map between PYR and V_LDH for
    vars PYR and PYR;
    vars V_LDH and V_LDH;
  enddef;
  def map between PYR and V_PDH for
    vars PYR and PYR;
    vars V_PDH and V_PDH;
  enddef;
  def map between PYR and V_ALS for
    vars PYR and PYR;
    vars V_ALS and V_ALS;
  enddef;
  def map between ACP and V_PTA for
    vars ACP and ACP;
    vars V_PTA and V_PTA;
  enddef;
  def map between ACP and V_ACK for
    vars ACP and ACP;
    vars V_ACK and V_ACK;
  enddef;
  def map between ACAL and V_ACALDH for
    vars ACAL and ACAL;
    vars V_ACALDH and V_ACALDH;
  enddef;
  def map between ACAL and V_ADH for
    vars ACAL and ACAL;
    vars V_ADH and V_ADH;
  enddef;
  def map between ACLAC and V_ALS for
    vars ACLAC and ACLAC;
    vars V_ALS and V_ALS;
  enddef;
  def map between ACLAC and V_ALDC for
    vars ACLAC and ACLAC;
    vars V_ALDC and V_ALDC;
  enddef;
  def map between ACLAC and V_NEALC for
    vars ACLAC and ACLAC;
    vars V_NEALC and V_NEALC;
  enddef;
  def map between ACET and V_ALDC for
    vars ACET and ACET;
    vars V_ALDC and V_ALDC;
  enddef;
  def map between ACET and V_NEALC for
    vars V_NEALC and V_NEALC;
  enddef;
  def map between ACET and V_ACETDH for
    vars ACET and ACET;
    vars V_ACETDH and V_ACETDH;
  enddef;
  def map between ACET and V_ACETEFF for
    vars ACET and ACET;
    vars V_ACETEFF and V_ACETEFF;
  enddef;
  def map between ATP and V_GLYC for
    vars ATP and ATP;
    vars V_GLYC and V_GLYC;
  enddef;
  def map between ATP and V_ACK for
    vars ATP and ATP;
    vars V_ACK and V_ACK;
  enddef;
  def map between ATP and V_ATPase for
    vars ATP and ATP;
    vars V_ATPase and V_ATPase;
  enddef;
  def map between NADH and V_GLYC for
    vars NADH and NADH;
    vars V_GLYC and V_GLYC;
  enddef;
  def map between NADH and V_PDH for
    vars NADH and NADH;
    vars V_PDH and V_PDH;
  enddef;
  def map between NADH and V_LDH for
    vars NADH and NADH;
    vars V_LDH and V_LDH;
  enddef;
  def map between NADH and V_ACALDH for
    vars NADH and NADH;
    vars V_ACALDH and V_ACALDH;
  enddef;
  def map between NADH and V_ADH for
    vars NADH and NADH;
    vars V_ADH and V_ADH;
  enddef;
  def map between NADH and V_ACETDH for
    vars NADH and NADH;
    vars V_ACETDH and V_ACETDH;
  enddef;
  def map between NADH and V_NOX for
    vars NADH and NADH;
    vars V_NOX and V_NOX;
  enddef;
  def map between PYR and environment for
    vars time and time;
  enddef;
  def map between ACP and environment for
    vars time and time;
  enddef;
  def map between ACAL and environment for
    vars time and time;
  enddef;
  def map between ACLAC and environment for
    vars time and time;
  enddef;
  def map between ACET and environment for
    vars time and time;
  enddef;
  def map between ATP and environment for
    vars time and time;
  enddef;
  def map between NADH and environment for
    vars time and time;
  enddef;
  def map between ACCOA and environment for
    vars time and time;
  enddef;
  def map between ACCOA and V_PDH for
    vars ACCOA and ACCOA;
    vars V_PDH and V_PDH;
  enddef;
  def map between ACCOA and V_ACALDH for
    vars ACCOA and ACCOA;
    vars V_ACALDH and V_ACALDH;
  enddef;
  def map between ACCOA and V_PTA for
    vars ACCOA and ACCOA;
    vars V_PTA and V_PTA;
  enddef;
  def map between GLC and V_GLYC for
    vars GLC and GLC;
  enddef;
  def map between NAD and V_GLYC for
    vars NAD and NAD;
  enddef;
  def map between ADP and V_GLYC for
    vars ADP and ADP;
  enddef;
  def map between LAC and V_LDH for
    vars LAC and LAC;
  enddef;
  def map between NAD and V_LDH for
    vars NAD and NAD;
  enddef;
  def map between NAD and V_PDH for
    vars NAD and NAD;
  enddef;
  def map between COA and V_PDH for
    vars COA and COA;
  enddef;
  def map between P and V_PTA for
    vars P and P;
  enddef;
  def map between COA and V_PTA for
    vars COA and COA;
  enddef;
  def map between AC and V_ACK for
    vars AC and AC;
  enddef;
  def map between ADP and ATP for
    vars ATP and ATP;
  enddef;
  def map between ADP and V_ACK for
    vars ADP and ADP;
  enddef;
  def map between NAD and V_ACALDH for
    vars NAD and NAD;
  enddef;
  def map between COA and V_ACALDH for
    vars COA and COA;
  enddef;
  def map between NAD and V_ADH for
    vars NAD and NAD;
  enddef;
  def map between ETOH and V_ADH for
    vars ETOH and ETOH;
  enddef;
  def map between NAD and NADH for
    vars NADH and NADH;
  enddef;
  def map between COA and ACCOA for
    vars ACCOA and ACCOA;
  enddef;
  def map between NAD and V_ACETDH for
    vars NAD and NAD;
  enddef;
  def map between BUT and V_ACETDH for
    vars BUT and BUT;
  enddef;
  def map between ADP and V_ATPase for
    vars ADP and ADP;
  enddef;
  def map between NAD and V_NOX for
    vars NAD and NAD;
  enddef;
  def map between O and V_NOX for
    vars O and O;
  enddef;
enddef;
// #PYR
// title: PYR
// alternative: pyruvate
// #ACP
// title: ACP
// alternative: acetyl phosphate
// #ACAL
// title: ACAL
// alternative: acetaldehyde
// #ACLAC
// title: ACLAC
// alternative: acetolactate
// #ACET
// title: ACET
// alternative: acetoin
// #ATP
// title: ATP
// alternative: adenosine triphosphate
// #ADP
// title: ADP
// alternative: adenosine diphosphate
// #NADH
// title: NADH
// alternative: nicotinamide adenine dinucleotide
// #NAD
// title: NAD
// alternative: positive nicotinamide adenine dinucleotide
// #ACCOA
// title: ACCOA
// alternative: acetyl coenzyme A
// #COA
// title: COA
// alternative: coenzyme A
// #AC
// title: AC
// alternative: acetate
// #BUT
// title: BUT
// alternative: 2,3-butanediol
// #ETOH
// title: ETOH
// alternative: ethanol
// #GLC
// title: GLC
// alternative: glucose
// #LAC
// title: LAC
// alternative: lactate
// #O
// title: O
// alternative: oxygen
// #P
// title: P
// alternative: inorganic phosphate
