<?xml version="1.0"?>
<!--  FILE :  rattanakul_model_2003.xml

CREATED :  24th July 2007

LAST MODIFIED : 24th July 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Rattanakul et al's 2003 mathematical model of bone formation and resorption mediated by parathyroid hormone: response to estrogen/PTH therapy.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="rattanakul_model_2003" name="rattanakul_model_2003">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Modeling of bone formation and resorption mediated by parathyroid hormone: response to estrogen/PTH therapy</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
<section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML model represents the second model from the published paper (eqs 38-40). This model builds on the core model (which describes changes in the concentration of PTH, the number of osteoclasts and the number of osteoblasts) by considering the effects of estrogen administration (for a period of 12 days in an interval of 28 days). The model runs in OpenCell to recreate the published results (figure 7a). The units are all dimensionless (in accordance with the published paper) and are therefore consistent. However a dimensionless time does mean that the model will not run in COR.  
</para>
  </section>
  <sect1 id="sec_structure">
  <title>Model Structure</title>

<para>
ABSTRACT: Bone, a major reservoir of body calcium, is under the hormonal control of the parathyroid hormone (PTH). Several aspects of its growth, turnover, and mechanism, occur in the absence of gonadal hormones. Sex steroids such as estrogen, nonetheless, play an important role in bone physiology, and are extremely essential to maintain bone balance in adults. In order to provide a basis for understanding the underlying mechanisms of bone remodeling as it is mediated by PTH, we propose here a mathematical model of the process. The nonlinear system model is then utilized to study the temporal effect of PTH as well as the action of estrogen replacement therapy on bone turnover. Analysis of the model is done on the assumption, supported by reported clinical evidence, that the process is characterized by highly diversified dynamics, which warrants the use of singular perturbation arguments. The model is shown to exhibit limit cycle behavior, which can develop into chaotic dynamics for certain ranges of the system's parametric values. Effects of estrogen and PTH administrations are then investigated by extending on the core model. Analysis of the model seems to indicate that the paradoxical observation that intermittent PTH administration causes net bone deposition while continuous administration causes net bone loss, and certain other reported phenomena may be attributed to the highly diversified dynamics which characterizes this nonlinear remodeling process. 
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="rattanakul_2003c.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram depicting the Rattanakul et al 2003 model - effects of PTH on osteoclast differentiation by osteoblasts. Exogenous application of PTH, and the effects of oestrogen, are also depicted.</caption>
</informalfigure>

<para>
The original paper reference is cited below:
</para>

<para>
Modeling of bone formation and resorption mediated by parathyroid hormone: response to estrogen/PTH therapy, Chontita Rattanakul, Yongwimon Lenbury, Nateetip Krishnamara, and David J. Wollkind, 2003,<emphasis>BioSystems</emphasis>, 70, 55-72.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/12753937">PubMed ID: 12753937</ulink>
</para>

</sect1>
</article>
</documentation> 
 
  <component name="environment">
    <variable cmeta:id="environment_time" name="time" public_interface="out" units="dimensionless"/>
  </component>

  <component cmeta:id="x" name="x">
      
    <variable cmeta:id="x_x" initial_value="2.0" name="x" public_interface="out" units="dimensionless"/>
    
    <variable name="a1" public_interface="in" units="dimensionless"/>
    <variable name="k1" public_interface="in" units="dimensionless"/>
    <variable name="b1" public_interface="in" units="dimensionless"/>
    <variable name="y" public_interface="in" units="dimensionless"/>
    <variable name="time" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> x </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <divide/>
            <ci> a1 </ci>
            <apply>
              <plus/>
              <ci> k1 </ci>
              <ci> y </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> b1 </ci>
            <ci> x </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="y" name="y">
      
    <variable cmeta:id="y_y" initial_value="1.0" name="y" public_interface="out" units="dimensionless"/>
    
    <variable name="epsilon" public_interface="in" units="dimensionless"/>
    <variable name="a2" public_interface="in" units="dimensionless"/>
    <variable name="a3" public_interface="in" units="dimensionless"/>
    <variable name="k2" public_interface="in" units="dimensionless"/>
    <variable name="b2" public_interface="in" units="dimensionless"/>
    <variable name="kc" public_interface="in" units="dimensionless"/>
    <variable name="x" public_interface="in" units="dimensionless"/>
    <variable name="z" public_interface="in" units="dimensionless"/>
    <variable name="time" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> y </ci> 
        </apply>
        <piecewise>
          <piece>
            <apply>
              <times/>
              <ci> epsilon </ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <ci> a2 </ci>
                      <apply>
                        <times/>
                        <ci> a3 </ci>
                        <ci> x </ci>
                      </apply>
                    </apply>
                    <ci> y </ci>
                    <ci> z </ci>
                  </apply>
                  <apply>
                    <plus/>
                    <ci> k2 </ci>
                    <apply>
                      <power/>
                      <ci> x </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
                <apply>
                  <times/>
                  <ci> b2 </ci>
                  <ci> y </ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <geq/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 0.0 </cn>
              </apply>
              <apply>
                <lt/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 10000.0 </cn>
              </apply>
            </apply>
          </piece>
          <piece>
            <apply>
              <times/>
              <ci> epsilon </ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <ci> a2 </ci>
                      <apply>
                        <times/>
                        <ci> a3 </ci>
                        <ci> x </ci>
                      </apply>
                    </apply>
                    <ci> y </ci>
                    <ci> z </ci>
                  </apply>
                  <apply>
                    <plus/>
                    <ci> k2 </ci>
                    <apply>
                      <power/>
                      <ci> x </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <apply>
                    <times/>
                    <ci> b2 </ci>
                    <ci> y </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> kc </ci>
                    <ci> y </ci>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <geq/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 10000.0 </cn>
              </apply>
              <apply>
                <lt/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 27280.0 </cn>
              </apply>
            </apply>
          </piece>
          <piece>
            <apply>
              <times/>
              <ci> epsilon </ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <ci> a2 </ci>
                      <apply>
                        <times/>
                        <ci> a3 </ci>
                        <ci> x </ci>
                      </apply>
                    </apply>
                    <ci> y </ci>
                    <ci> z </ci>
                  </apply>
                  <apply>
                    <plus/>
                    <ci> k2 </ci>
                    <apply>
                      <power/>
                      <ci> x </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
                <apply>
                  <times/>
                  <ci> b2 </ci>
                  <ci> y </ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <geq/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 27280.0 </cn>
              </apply>
              <apply>
                <lt/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 50320.0 </cn>
              </apply>
            </apply>
          </piece>
          <piece>
            <apply>
              <times/>
              <ci> epsilon </ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <ci> a2 </ci>
                      <apply>
                        <times/>
                        <ci> a3 </ci>
                        <ci> x </ci>
                      </apply>
                    </apply>
                    <ci> y </ci>
                    <ci> z </ci>
                  </apply>
                  <apply>
                    <plus/>
                    <ci> k2 </ci>
                    <apply>
                      <power/>
                      <ci> x </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <apply>
                    <times/>
                    <ci> b2 </ci>
                    <ci> y </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> kc </ci>
                    <ci> y </ci>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <geq/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 50320.0 </cn>
              </apply>
              <apply>
                <lt/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 67600.0 </cn>
              </apply>
            </apply>
          </piece>
          <piece>
            <apply>
              <times/>
              <ci> epsilon </ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <ci> a2 </ci>
                      <apply>
                        <times/>
                        <ci> a3 </ci>
                        <ci> x </ci>
                      </apply>
                    </apply>
                    <ci> y </ci>
                    <ci> z </ci>
                  </apply>
                  <apply>
                    <plus/>
                    <ci> k2 </ci>
                    <apply>
                      <power/>
                      <ci> x </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
                <apply>
                  <times/>
                  <ci> b2 </ci>
                  <ci> y </ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <geq/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 67600.0 </cn>
              </apply>
              <apply>
                <lt/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 90640.0 </cn>
              </apply>
            </apply>
          </piece>
          <piece>
            <apply>
              <times/>
              <ci> epsilon </ci>
              <apply>
                <minus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <apply>
                      <plus/>
                      <ci> a2 </ci>
                      <apply>
                        <times/>
                        <ci> a3 </ci>
                        <ci> x </ci>
                      </apply>
                    </apply>
                    <ci> y </ci>
                    <ci> z </ci>
                  </apply>
                  <apply>
                    <plus/>
                    <ci> k2 </ci>
                    <apply>
                      <power/>
                      <ci> x </ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 2.0 </cn>
                    </apply>
                  </apply>
                </apply>
                <apply>
                  <plus/>
                  <apply>
                    <times/>
                    <ci> b2 </ci>
                    <ci> y </ci>
                  </apply>
                  <apply>
                    <times/>
                    <ci> kc </ci>
                    <ci> y </ci>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <and/>
              <apply>
                <geq/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 90640.0 </cn>
              </apply>
              <apply>
                <lt/>
                <ci> time </ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 107920.0 </cn>
              </apply>
            </apply>
          </piece>
        </piecewise>
      </apply>
    </math>
  </component>

  <component cmeta:id="z" name="z">
      
    <variable cmeta:id="z_z" initial_value="0.15" name="z" public_interface="out" units="dimensionless"/>
    
    <variable name="epsilon" public_interface="in" units="dimensionless"/>
    <variable name="delta" public_interface="in" units="dimensionless"/>
    <variable name="a4" public_interface="in" units="dimensionless"/>
    <variable name="a5" public_interface="in" units="dimensionless"/>
    <variable name="k3" public_interface="in" units="dimensionless"/>
    <variable name="b3" public_interface="in" units="dimensionless"/>
    <variable name="x" public_interface="in" units="dimensionless"/>
    <variable name="time" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> z </ci> 
        </apply>
        <apply>
          <times/>
          <ci> epsilon </ci>
          <ci> delta </ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> a4 </ci>
              <ci> x </ci>
            </apply>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> a5 </ci>
                  <ci> x </ci>
                  <ci> z </ci>
                </apply>
                <apply>
                  <plus/>
                  <ci> k3 </ci>
                  <ci> x </ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci> b3 </ci>
                <ci> z </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component name="model_parameters"> 
    <variable initial_value="0.1" name="epsilon" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.9" name="delta" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.05" name="a1" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.009" name="a2" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.675" name="a3" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.01" name="a4" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.005" name="a5" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.1" name="b1" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.3" name="b2" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.01" name="b3" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.1" name="k1" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.5" name="k2" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.025" name="k3" public_interface="out" units="dimensionless"/>
    <variable initial_value="0.2" name="kc" public_interface="out" units="dimensionless"/>
  </component>

  <connection>
    <map_components component_1="x" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="y" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="z" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>

  <connection>
    <map_components component_1="y" component_2="x"/>
    <map_variables variable_1="x" variable_2="x"/>
    <map_variables variable_1="y" variable_2="y"/>
  </connection>

  <connection>
    <map_components component_1="x" component_2="model_parameters"/>
    <map_variables variable_1="a1" variable_2="a1"/>
    <map_variables variable_1="k1" variable_2="k1"/>
    <map_variables variable_1="b1" variable_2="b1"/>
  </connection>

  <connection>
    <map_components component_1="y" component_2="z"/>
    <map_variables variable_1="z" variable_2="z"/>
  </connection>

  <connection>
    <map_components component_1="y" component_2="model_parameters"/>
    <map_variables variable_1="epsilon" variable_2="epsilon"/>
    <map_variables variable_1="a2" variable_2="a2"/>
    <map_variables variable_1="a3" variable_2="a3"/>
    <map_variables variable_1="k2" variable_2="k2"/>
    <map_variables variable_1="b2" variable_2="b2"/>
    <map_variables variable_1="kc" variable_2="kc"/>
  </connection>

  <connection>
    <map_components component_1="z" component_2="x"/>
    <map_variables variable_1="x" variable_2="x"/>
  </connection>

  <connection>
    <map_components component_1="z" component_2="model_parameters"/>
    <map_variables variable_1="epsilon" variable_2="epsilon"/>
    <map_variables variable_1="delta" variable_2="delta"/>
    <map_variables variable_1="a4" variable_2="a4"/>
    <map_variables variable_1="a5" variable_2="a5"/>
    <map_variables variable_1="k3" variable_2="k3"/>
    <map_variables variable_1="b3" variable_2="b3"/>
  </connection>


<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><rdf:Description rdf:about="rdf:#010fc58c-5bfe-45ee-8eff-69131527777f"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#53aea130-098d-483c-86db-47220191de1c"/></N></rdf:Description><rdf:Description rdf:about="#rattanakul_model_2003"><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:about="rdf:#356dc310-39be-4004-bee0-e5cc74292bfe"/></reference><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:about="rdf:#0da4e7b3-7a4f-40bc-8788-7c9142ad06c6"/></reference><simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n1"/></simulation><cmeta:comment><rdf:Description rdf:about="rdf:#10437524-3ca7-4177-89eb-b0d7f4e2ccaf"/></cmeta:comment><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
        Rattanakul et al's 2003 mathematical model of bone formation and resorption mediated by parathyroid hormone: response to estrogen/PTH therapy.
      </title>
</rdf:Description>
<rdf:Description rdf:about="#z">
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">number of osteoblastic cells</alternative>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">z</title>
</rdf:Description>
<rdf:Description rdf:about="#y">
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">number of osteoclastic cells</alternative>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">y</title>
</rdf:Description>
<rdf:Description rdf:about="#x">
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">PTH</alternative>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">concentration of parathyroid hormone</alternative>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">x</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#19f3b245-693e-41d1-9640-557fea680edb">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#0b1e3e7a-b9f8-4337-aaaa-576babaa04e8"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#cde910c6-0d7d-4955-9e14-714068c9efc1">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en"></FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#cfa6a081-e543-4152-828a-806c1bac8898">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#a62204bb-4f61-4622-85c9-5772b3025626"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c321bf0f-fa05-4471-a0ae-753818ff7e4d">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">David</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Wollkind</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">J</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#d8d63f01-b4a0-481a-bd85-2ffbfb188ca9">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#c321bf0f-fa05-4471-a0ae-753818ff7e4d"/>
</N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#9911f700-5746-4f7c-9c36-37ff9dc14bac">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">c.lloyd@auckland.ac.nz</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#0da4e7b3-7a4f-40bc-8788-7c9142ad06c6">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#5945bd4a-51c3-4478-b092-dd0907111e77"/>
</subject>
</rdf:Description>
<rdf:Description rdf:about="rdf:#78618cfb-f24f-4788-955b-53123518a68c">
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The Bioengineering Institute</Orgunit>
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">0.1</maximumStepSize>
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">100000</pointDensity>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">250</endingValue>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<rdf:first>
<rdf:Description rdf:nodeID="n2"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:about="rdf:#b88e7bed-c409-4807-aa82-5efe15a0f5db">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">BioSystems</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#a62204bb-4f61-4622-85c9-5772b3025626">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Chontita</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Rattananakul</Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#46b15a9d-eaf0-49a1-a9a0-8935c1cadb4a">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_4>
<rdf:Description rdf:about="rdf:#d8d63f01-b4a0-481a-bd85-2ffbfb188ca9"/>
</rdf:_4>
<rdf:_1>
<rdf:Description rdf:about="rdf:#cfa6a081-e543-4152-828a-806c1bac8898"/>
</rdf:_1>
<rdf:_2>
<rdf:Description rdf:about="rdf:#010fc58c-5bfe-45ee-8eff-69131527777f"/>
</rdf:_2>
<rdf:_3>
<rdf:Description rdf:about="rdf:#19f3b245-693e-41d1-9640-557fea680edb"/>
</rdf:_3>
</rdf:Description>
<rdf:Description rdf:about="rdf:#ed1e6683-c9e1-41d3-8837-802ea612eb3d">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#fe938adf-e84d-443d-8aa0-8784d6104617"/>
</N>
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#78618cfb-f24f-4788-955b-53123518a68c"/>
</ORG>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#9911f700-5746-4f7c-9c36-37ff9dc14bac"/>
</EMAIL>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c8c266ac-72e0-4bdc-a5e4-791d11a5f8fb">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2007-07-24T00:00:00+00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#fe938adf-e84d-443d-8aa0-8784d6104617">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#46952438-cfd9-481f-a663-d16341dbb263">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_4 xml:lang="en">osteoblast</rdf:_4>
<rdf:_1 xml:lang="en">parathyroid hormone</rdf:_1>
<rdf:_2 xml:lang="en">osteoporosis</rdf:_2>
<rdf:_3 xml:lang="en">osteoclast</rdf:_3>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e31d5f9f-4b9e-4552-bcf7-713b4f29cfc0">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#46b15a9d-eaf0-49a1-a9a0-8935c1cadb4a"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Modeling of bone formation and resorption mediated by parathyroid hormone: response to estrogen/PTH therapy</title>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">55</first_page>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#b88e7bed-c409-4807-aa82-5efe15a0f5db"/>
</Journal>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#bb965776-8b30-4a43-86fd-796e7474e987"/>
</issued>
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">70</volume>
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">72</last_page>
</rdf:Description>
<rdf:Description rdf:about="">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#ed1e6683-c9e1-41d3-8837-802ea612eb3d"/>
</creator>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#af9feaa1-5105-4b60-beb7-3d3b0182ef3f"/>
</cmeta:comment>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Modeling of bone formation and resorption mediated by parathyroid hormone: response to estrogen/PTH therapy (core model + exogenous estrogen administration)</title>
<publisher xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">The University of Auckland, Bioengineering Institute</publisher>
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#c8c266ac-72e0-4bdc-a5e4-791d11a5f8fb"/>
</created>
</rdf:Description>
<rdf:Description rdf:about="rdf:#53aea130-098d-483c-86db-47220191de1c">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Yongwimon</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lenbury</Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#0b1e3e7a-b9f8-4337-aaaa-576babaa04e8">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nateetip</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Krishnamara</Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#10437524-3ca7-4177-89eb-b0d7f4e2ccaf">
<rdf:value xml:lang="en">This is a CellML description of Rattanakul et al's 2003 mathematical model of bone formation and resorption mediated by parathyroid hormone: response to estrogen/PTH therapy.</rdf:value>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#add39444-9ddc-4f55-87b1-296761991376"/>
</creator>
</rdf:Description>
<rdf:Description rdf:about="rdf:#356dc310-39be-4004-bee0-e5cc74292bfe">
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#e31d5f9f-4b9e-4552-bcf7-713b4f29cfc0"/>
</JournalArticle>
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">12753937</Pubmed_id>
</rdf:Description>
<rdf:Description rdf:about="rdf:#5945bd4a-51c3-4478-b092-dd0907111e77">
<rdf:value>
<rdf:Description rdf:about="rdf:#46952438-cfd9-481f-a663-d16341dbb263"/>
</rdf:value>
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#add39444-9ddc-4f55-87b1-296761991376">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine Lloyd</FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#bb965776-8b30-4a43-86fd-796e7474e987">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2003-06-00 00:00</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#af9feaa1-5105-4b60-beb7-3d3b0182ef3f">
<rdf:value xml:lang="en"></rdf:value>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#cde910c6-0d7d-4955-9e14-714068c9efc1"/>
</creator>
</rdf:Description>
<rdf:Description rdf:nodeID="n1">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n3"/>
</boundIntervals>
</rdf:Description>
</rdf:RDF>
</model>