<?xml version="1.0"?>

<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="haugh_model_2004b" name="haugh_model_2004b">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Mathematical model of human growth hormone (hGH)-stimulated cell proliferation explains the efficacy of hGH variants as receptor agonists or antagonists</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML model runs in OpenCell (but not COR due to the presence of differential algebraic equations).  The units have been checked and they are consistent.  The CellML model may recreate the results of the original published model but there is no simple validation method as there are no "concentration against time" figures in the paper. The CellML model is based on equations A2-A5 from the Appendix (steady state model). Parameter values were taken from table 1 in the paper and were also supplied through correspondence with the original model author.
          </para>
  </section>
  <sect1 id="sec_structure">
  <title>Model Structure</title>

<para>
ABSTRACT: Human growth hormone (hGH) is a therapeutically important endocrine factor that signals various cell types. Structurally and functionally, the interactions of hGH with its receptor have been resolved in fine detail, such that hGH and hGH receptor variants can be practically engineered by either random or rational approaches to achieve significant changes in the free energies of binding. A somewhat unique feature of hGH action is its homodimerization of two hGH receptors, which is required for intracellular signaling and stimulation of cell proliferation, yet the potencies of hGH mutants in cell-based assays rarely correlate with their overall receptor-binding avidities. Here, a mathematical model of hGH-stimulated cell signaling is posed, accounting not only for binding interactions at the cell surface but induction of receptor endocytosis and downregulation as well. Receptor internalization affects ligand potency by imposing a limit on the lifetime of an active receptor complex, irrespective of ligand-receptor binding properties. The model thus explains, in quantitative terms, the numerous published observations regarding hGH receptor agonism and antagonism and challenges the interpretations of previous studies that have not considered receptor trafficking as a central regulatory mechanism in hGH signaling.
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="haugh_2004.png"/>
  </imageobject>
</mediaobject>
<caption>A schematic diagram of the kinetic model of human growth hormone (hGH) receptor binding and trafficking.  The extracellular ligand (L), hGH, has two sites for binding the hGH receptor (R), and these are shown in cerise and cyan in the diagram and are numbered 1 and 2 respectively.  Site 1 always binds to the receptor first to form a 1:1 ligand-receptor complex (C).  A 1:2 dimer (D) may then form through the binding of a second receptor to site 2 of the ligand.  Dimer dissociation can occur the uncoupling of either hGH site 1 or site 2, but the 1:1 ligand-receptor complexes bound through site 2 dissociate much faster than those bound through site 1.  Dimerised complexes (D) are internalised at a higher rate than are free receptors (R) or 1:1 complexes (C), and while internalised dimers are always degraded, internalised 1:1 complexes or free receptors can either be degraded or recycled to the cell surface.  A steady state is maintained through de novo receptor synthesis.</caption>
</informalfigure>

<para>
The original paper reference is cited below:
</para>

<para>
Mathematical model of human growth hormone (hGH)-stimulated cell proliferation explains the efficacy of hGH variants as receptor agonists or antagonists, Jason M. Haugh, 2004, <emphasis>Biotechnology Progress</emphasis>, volume 20, issue 5, 1337-1344.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/15458315">PubMed ID: 15458315</ulink>
</para>

</sect1>
</article>
</documentation> 




  <units name="nanomolar">
    <unit prefix="nano" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="per_nanomolar">
    <unit exponent="-1" units="nanomolar"/>
  </units>
  
  <units name="minute">
    <unit multiplier="60.0" units="second"/>
  </units>

  <units name="flux">
    <unit units="nanomolar"/>
    <unit exponent="-1" units="minute"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit exponent="-1" units="minute"/>
  </units>

  <units name="second_order_rate_constant">
    <unit exponent="-1" units="nanomolar"/>
    <unit exponent="-1" units="minute"/>
  </units>
  
  
  <component name="environment">
    <variable cmeta:id="environment_time" name="time" public_interface="out" units="minute"/>
  </component>
  
  <component cmeta:id="C" name="C">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#C">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">C</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">1:1 hGH-receptor complex</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="C_C" name="C" public_interface="out" units="nanomolar"/>
    
    <variable name="kf1" public_interface="in" units="second_order_rate_constant"/>
    <variable name="kr1" public_interface="in" units="first_order_rate_constant"/>
    <variable name="k_x1" public_interface="in" units="first_order_rate_constant"/>
    <variable name="kt" public_interface="in" units="first_order_rate_constant"/>
	<variable name="ke" public_interface="in" units="first_order_rate_constant"/>
    <variable name="L" public_interface="in" units="nanomolar"/>
    <variable name="R" public_interface="in" units="nanomolar"/>
	<variable name="K_X" public_interface="in" units="per_nanomolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="1"> 
      <apply>
        <eq/> 
        <ci> C </ci> 
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> kf1 </ci>
            <ci> L </ci>
            <ci> R </ci>
          </apply>
          <apply>
            <plus/>
			<ci> kr1 </ci>
			<ci> kt </ci>
			<apply>
              <times/>
              <apply>
                <plus/>
				<ci> k_x1 </ci>
                <ci> ke </ci>
              </apply>
              <ci> K_X </ci>
              <ci> R </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component cmeta:id="D" name="D">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#D">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">D</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">1:2 hGH-receptor dimer complex</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="D_D" name="D" public_interface="out" units="nanomolar"/>
	<variable name="K_X" public_interface="out" units="per_nanomolar"/>
   
    <variable name="k_x1" public_interface="in" units="first_order_rate_constant"/>
    <variable name="kx2" public_interface="in" units="second_order_rate_constant"/>
    <variable name="k_x2" public_interface="in" units="first_order_rate_constant"/>
    <variable name="ke" public_interface="in" units="first_order_rate_constant"/>
    <variable name="C" public_interface="in" units="nanomolar"/>
    <variable name="R" public_interface="in" units="nanomolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="2"> 
      <apply>
        <eq/> 
        <ci> D </ci> 
        <apply>
          <times/>
          <ci> K_X </ci>
          <ci> R </ci>
          <ci> C </ci>
        </apply>
	  </apply>
	</math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="3"> 
	  <apply>
        <eq/> 
        <ci> K_X </ci> 
        <apply>
          <divide/>
		  <ci> kx2 </ci>
          <apply>
            <plus/>
            <ci> k_x2 </ci>
            <ci> k_x1 </ci>
            <ci> ke </ci>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>

  <component cmeta:id="R" name="R">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#R">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">R</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">free hGH-receptor</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="R_R" name="R" public_interface="out" units="nanomolar"/>
    <variable name="R_initial" public_interface="out" initial_value="2000.0" units="nanomolar"/>
    
	<variable name="kt" public_interface="in" units="first_order_rate_constant"/>
    <variable name="krec" public_interface="in" units="first_order_rate_constant"/>
	<variable name="kdeg" public_interface="in" units="first_order_rate_constant"/>
	<variable name="ke" public_interface="in" units="first_order_rate_constant"/>
	<variable name="D" public_interface="in" units="nanomolar"/>
    <variable name="C" public_interface="in" units="nanomolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="4"> 
      <apply>
        <eq/> 
        <ci> R </ci> 
        <apply>
          <minus/>
		  <ci> R_initial </ci>
		  <apply>
            <plus/>
		    <ci> C </ci>
            <apply>
              <times/>
			  <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless"> 2.0 </cn> 
              <apply>
                <divide/>
                <ci> ke </ci>
                <ci> kt </ci>
              </apply>
              <apply>
                <plus/>
			    <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless"> 1.0 </cn> 
                <apply>
                  <divide/>
                  <ci> krec </ci>
				  <ci> kdeg </ci>
                </apply>
              </apply> 
              <ci> D </ci>
            </apply>
          </apply>
        </apply> 
	  </apply>
    </math>
  </component>

  <component cmeta:id="Ri" name="Ri">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#Ri">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Ri</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">internalised hGH-receptor</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable initial_value="200.0"  name="Ri" public_interface="out" units="nanomolar"/>
	
    <variable name="krec" public_interface="in" units="first_order_rate_constant"/>
    <variable name="kdeg" public_interface="in" units="first_order_rate_constant"/>
    <variable name="kt" public_interface="in" units="first_order_rate_constant"/>
    <variable name="R" public_interface="in" units="nanomolar"/>
	<variable name="C" public_interface="in" units="nanomolar"/>
    <variable name="time" public_interface="in" units="minute"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="5"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> Ri </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> kt </ci>
            <apply>
              <plus/>
              <ci> R </ci>
              <ci> C </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <ci> krec </ci>
              <ci> kdeg </ci>
            </apply>
            <ci> Ri </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component name="signal">  
    <variable name="signal" units="dimensionless"/>
    
    <variable name="kappaE" public_interface="in" units="dimensionless"/>
    <variable name="D" public_interface="in" units="nanomolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="6"> 
      <apply>
        <eq/> 
        <ci> signal </ci> 
        <apply>
          <divide/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless"> 2.0 </cn>
              <ci> D </ci>
            </apply>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="nanomolar"> 200.0 </cn>
          </apply>
          <apply>
            <plus/>
            <ci> kappaE </ci>
            <apply>
              <divide/>
              <apply>
                <times/>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless"> 2.0 </cn>
                <ci> D </ci>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="nanomolar"> 200.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
  <component name="model_parameters"> 
    <variable initial_value="0.1" name="kf1" public_interface="out" units="second_order_rate_constant"/>
    <variable name="kr1" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="4.83" name="kx2" public_interface="out" units="second_order_rate_constant"/>
    <variable initial_value="0.016" name="k_x2" public_interface="out" units="first_order_rate_constant"/>
    <variable name="k_x1" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="0.10" name="ke" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="0.005" name="kt" public_interface="out" units="first_order_rate_constant"/>

<!-- Note: the model author was contacted and values for the following 3 parameters were requested. -->

    <variable initial_value="0.0" name="krec" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="0.05" name="kdeg" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="10.0" name="Vs" public_interface="out" units="flux"/>
    <variable initial_value="0.01" name="L" public_interface="out" units="nanomolar"/>
    <variable initial_value="0.20" name="kappaE" public_interface="out" units="dimensionless"/>
    
    <variable initial_value="1.0" name="KD" units="nanomolar"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> kr1 </ci> 
        <apply>
          <times/>
          <ci> KD </ci>
          <ci> kf1 </ci>
        </apply>
      </apply>

      <apply>
        <eq/> 
        <ci> k_x1 </ci> 
        <apply>
          <times/>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless"> 0.01 </cn> 
          <ci> kr1 </ci>
        </apply>
      </apply> 
    </math>
  </component>
  
 
  <connection>
    <map_components component_1="Ri" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
 
  <connection>
    <map_components component_1="D" component_2="C"/>
    <map_variables variable_1="C" variable_2="C"/>
    <map_variables variable_1="K_X" variable_2="K_X"/>
  </connection> 

  <connection>
    <map_components component_1="R" component_2="C"/>
    <map_variables variable_1="C" variable_2="C"/>
    <map_variables variable_1="R" variable_2="R"/>
  </connection>

  <connection>
    <map_components component_1="D" component_2="R"/>
    <map_variables variable_1="R" variable_2="R"/>
    <map_variables variable_1="D" variable_2="D"/>
  </connection>

  <connection>
    <map_components component_1="Ri" component_2="R"/>
    <map_variables variable_1="R" variable_2="R"/>
  </connection>

  <connection>
    <map_components component_1="Ri" component_2="C"/>
    <map_variables variable_1="C" variable_2="C"/>
   </connection>

  <connection>
    <map_components component_1="D" component_2="signal"/>
    <map_variables variable_1="D" variable_2="D"/>
  </connection>

  <connection>
    <map_components component_1="C" component_2="model_parameters"/>
    <map_variables variable_1="kf1" variable_2="kf1"/>
    <map_variables variable_1="kr1" variable_2="kr1"/>
    <map_variables variable_1="k_x1" variable_2="k_x1"/>
	<map_variables variable_1="ke" variable_2="ke"/>
    <map_variables variable_1="kt" variable_2="kt"/>
    <map_variables variable_1="L" variable_2="L"/>
  </connection>
  
  <connection>
    <map_components component_1="D" component_2="model_parameters"/>
    <map_variables variable_1="k_x1" variable_2="k_x1"/>
    <map_variables variable_1="kx2" variable_2="kx2"/>
    <map_variables variable_1="k_x2" variable_2="k_x2"/>
    <map_variables variable_1="ke" variable_2="ke"/>
  </connection>

  <connection>
    <map_components component_1="R" component_2="model_parameters"/>
    <map_variables variable_1="kt" variable_2="kt"/>
    <map_variables variable_1="krec" variable_2="krec"/>
	<map_variables variable_1="kdeg" variable_2="kdeg"/>
	<map_variables variable_1="ke" variable_2="ke"/>
  </connection>

  <connection>
    <map_components component_1="Ri" component_2="model_parameters"/>
    <map_variables variable_1="krec" variable_2="krec"/>
    <map_variables variable_1="kdeg" variable_2="kdeg"/>
    <map_variables variable_1="kt" variable_2="kt"/>
  </connection>
  
  <connection>
    <map_components component_1="signal" component_2="model_parameters"/>
    <map_variables variable_1="kappaE" variable_2="kappaE"/>
  </connection>

<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  <rdf:Bag rdf:about="rdf:#fa7bf1fe-e354-4761-9c32-6e997c5b56d3">
    <rdf:li>growth hormone</rdf:li>
    <rdf:li>endocrine</rdf:li>
    <rdf:li>pituitary</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#d03ef4a9-d16a-4981-a2e6-1bc402ace599">
    <rdf:li rdf:resource="rdf:#0e4000ae-bce1-4f7e-aca1-f736f385eb2b"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#e81a6abe-79fb-457d-8b93-a4af106e6d31">
    <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2007-07-09T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Mathematical model of human growth hormone (hGH)-stimulated cell proliferation explains the efficacy of hGH variants as receptor agonists or antagonists (Steady State Model)</dc:title>
	<dc:publisher xmlns:dc="http://purl.org/dc/elements/1.1/">The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#acb0c628-9910-4856-ac47-9e10c8cd2c76"/>
    <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#e81a6abe-79fb-457d-8b93-a4af106e6d31"/>
    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#6ba92720-49b4-4c43-b061-915b2b95b6f5"/>
    <cmeta:modification rdf:resource="rdf:#2cae4b26-cc50-42b0-b21b-2c5c2ebbcd1e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#89e1701b-ace7-4c4a-b002-4e9f7ba189ad">
    <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2007-09-02T16:59:12+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#600642bc-3efd-4737-9d5f-589551c26a28">
    <bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">15458315</bqs:Pubmed_id>
    <bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#d61b6f13-9f0a-4f65-8a1e-e97c075ed080"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bbe4120e-ff72-4785-b668-477adf870615">
    <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine</vCard:Given>
    <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Lloyd</vCard:Family>
    <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#haugh_model_2004b">
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
        Jason Haugh's 2004 mathematical model of human growth hormone-stimulated cell proliferation.
      </dc:title>
    <cmeta:comment rdf:resource="rdf:#b2cfdb9f-4bd3-4da9-8daf-f15eaa638ad3"/>
    <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#600642bc-3efd-4737-9d5f-589551c26a28"/>
    <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#a8f8c4e7-60e4-4f17-a1ce-b3bf2556be7c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0e4000ae-bce1-4f7e-aca1-f736f385eb2b">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#9de3dc2f-50b2-45fc-b2a8-6bc8bac82fe7"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#319d0459-4118-4786-9c96-c2db113445b5">
    <dcterms:W3CDTF xmlns:dcterms="http://purl.org/dc/terms/">2004-05-22</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c489266c-2edd-4425-ae11-f815ca39af10">
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Biotechnology Progress</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4ab05e2e-3f81-4361-8be6-437f6c2ffc03">
    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#bbe4120e-ff72-4785-b668-477adf870615"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f16e1606-125e-4f9b-8783-98d5efa7beaf">
    <vCard:Orgname xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">The University of Auckland</vCard:Orgname>
    <vCard:Orgunit xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a8f8c4e7-60e4-4f17-a1ce-b3bf2556be7c">
    <dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#dd0b1008-6440-4280-9695-a97a5f739d6d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#acb0c628-9910-4856-ac47-9e10c8cd2c76">
    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#f77d010c-08bc-46dc-8682-d9969733766e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dd0b1008-6440-4280-9695-a97a5f739d6d">
    <bqs:subject_type xmlns:bqs="http://www.cellml.org/bqs/1.0#">keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#fa7bf1fe-e354-4761-9c32-6e997c5b56d3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9c4dcb46-3b39-4cde-921f-6c5d5de77845">
    <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine</vCard:Given>
    <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Lloyd</vCard:Family>
    <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9de3dc2f-50b2-45fc-b2a8-6bc8bac82fe7">
    <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Jason</vCard:Given>
    <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Haugh</vCard:Family>
    <vCard:Other xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">M</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b2cfdb9f-4bd3-4da9-8daf-f15eaa638ad3">
    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#6ae3bb51-6701-47e0-b0d9-d7483a7d115b"/>
    <rdf:value>This is a CellML description of Jason Haugh's 2004 mathematical model of human growth hormone-stimulated cell proliferation.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d61b6f13-9f0a-4f65-8a1e-e97c075ed080">
    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:resource="rdf:#d03ef4a9-d16a-4981-a2e6-1bc402ace599"/>
    <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Mathematical model of human growth hormone (hGH)-stimulated cell proliferation explains the efficacy of hGH variants as receptor agonists or antagonists</dc:title>
    <bqs:volume xmlns:bqs="http://www.cellml.org/bqs/1.0#">20</bqs:volume>
    <bqs:first_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">1337</bqs:first_page>
    <bqs:Journal xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#c489266c-2edd-4425-ae11-f815ca39af10"/>
    <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:resource="rdf:#319d0459-4118-4786-9c96-c2db113445b5"/>
    <bqs:last_page xmlns:bqs="http://www.cellml.org/bqs/1.0#">1344</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6ae3bb51-6701-47e0-b0d9-d7483a7d115b">
    <vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b5580e58-f882-4916-9d6a-bc50a09d6540">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6ba92720-49b4-4c43-b061-915b2b95b6f5">
    <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#f16e1606-125e-4f9b-8783-98d5efa7beaf"/>
    <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#b5580e58-f882-4916-9d6a-bc50a09d6540"/>
    <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:resource="rdf:#9c4dcb46-3b39-4cde-921f-6c5d5de77845"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2cae4b26-cc50-42b0-b21b-2c5c2ebbcd1e">
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f77d010c-08bc-46dc-8682-d9969733766e">
    <vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#"/>
  </rdf:Description>
</rdf:RDF>
</model>