<?xml version="1.0" encoding="utf-8"?>
<!--  FILE :  pedersen_bertram_sherman_2005.cellml

CREATED :  27th July 2007
LAST MODIFIED : 18th Feb 2010
AUTHOR :  Catherine Lloyd
	Bioengineering Institute
	The University of Auckland
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.
DESCRIPTION :  This file contains a CellML description of Pedersen, Bertram and Sherman's 2005 mathematical model of metabolically driven insulin secretion in pancreatic beta cells.
-->
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="pedersen_model_2005" name="pedersen_model_2005">

	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Intra- and inter-islet synchronization of metabolically driven insulin secretion</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>This CellML model runs in OpenCell and COR but does not recreate the published results. The model is based on the authors original XPPAUT.ode file which can be found at  www.math.fsu.edu/~bertram/software/islet/BJ_05. The units have been checked and they are consistent. We are unsure why the CellML model is not recreating the published results.</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>ABSTRACT: Insulin secretion from pancreatic beta-cells is pulsatile with a period of 5-10 min and is believed to be responsible for plasma insulin oscillations with similar frequency. To observe an overall oscillatory insulin profile it is necessary that the insulin secretion from individual beta-cells is synchronized within islets, and that the population of islets is also synchronized. We have recently developed a model in which pulsatile insulin secretion is produced as a result of calcium-driven electrical oscillations in combination with oscillations in glycolysis. We use this model to investigate possible mechanisms for intra-islet and inter-islet synchronization. We show that electrical coupling is sufficient to synchronize both electrical bursting activity and metabolic oscillations. We also demonstrate that islets can synchronize by mutually entraining each other by their effects on a simple model "liver," which responds to the level of insulin secretion by adjusting the blood glucose concentration in an appropriate way. Since all islets are exposed to the blood, the distributed islet-liver system can synchronize the individual islet insulin oscillations. Thus, we demonstrate how intra-islet and inter-islet synchronization of insulin oscillations may be achieved.</para>
				
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>model diagram</title>
							</objectinfo>
							<imagedata fileref="pedersen_2005.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the pathways described by the mathematical model. Extracellular glucose (Ge) enters the pancreatic beta-cell through GLUT-2 transporters in the plasma membrane, and is subsequently broken down through a series of enzyme-catalysed reactions in the glycolysis pathway. The metabolic products of the glycolysis pathway feed into the mitchondria, the site of aerobic respiration, where they are used to produce ATP. ATP represents the common substrate, linking the metabolic (glycolysis) and electrical (membrane potential) components of the mathematical model by regulating the flow of potassium ions through the K(ATP)-channels in the plasma membrane. In turn, these control regulate the membrane potential and calcium ion flow leading to insulin secretion. Insulin acts to lower the plasma glucose concentration though the functions of the liver (represented by a dashed line).</caption>
				</informalfigure>
				<para>The original paper reference is cited below:</para>
				<para>Intra- and inter-islet synchronization of metabolically driven insulin secretion, Morten Gram Pedersen, Richard Bertram, and Arthur Sherman, 2005,<emphasis>Biophysical Journal</emphasis>
					, 89, 107-119. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/15834002">PubMed ID: 15834002</ulink>
				</para>
			</sect1>
		</article>
	</documentation>


	<units name="millisecond">
		<unit units="second" prefix="milli"/>
	</units>
	<units name="millivolt">
		<unit units="volt" prefix="milli"/>
	</units>
	<units name="femtofarad">
		<unit units="farad" prefix="femto"/>
	</units>
	<units name="picosiemens">
		<unit units="siemens" prefix="pico"/>
	</units>
	<units name="femtoampere">
		<unit units="ampere" prefix="femto"/>
	</units>
	<units name="per_femtoampere">
		<unit units="ampere" prefix="femto" exponent="-1"/>
	</units>
	<units name="millimolar">
		<unit units="mole" prefix="milli"/>
		<unit units="litre" exponent="-1"/>
	</units>
	<units name="millimolar2">
		<unit units="millimolar" exponent="2"/>
	</units>
	<units name="micromolar">
		<unit units="mole" prefix="micro"/>
		<unit units="litre" exponent="-1"/>
	</units>
	<units name="per_micromolar">
		<unit units="micromolar" exponent="-1"/>
	</units>
	<units name="millimolar_per_millisecond">
		<unit units="millimolar"/>
		<unit units="millisecond" exponent="-1"/>
	</units>
	<units name="micromolar_per_millisecond">
		<unit units="micromolar"/>
		<unit units="millisecond" exponent="-1"/>
	</units>
	<units name="first_order_rate_constant">
		<unit units="millisecond" exponent="-1"/>
	</units>

	<component name="environment">
		<variable name="time" units="millisecond" public_interface="out"/>
	</component>

	<component name="Gi" cmeta:id="Gi">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="Gi" units="millimolar" initial_value="6.0637" public_interface="out"/>
		<variable name="Jglut" units="millimolar_per_millisecond" public_interface="in"/>
		<variable name="Jgk" units="millimolar_per_millisecond" public_interface="in"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>Gi</ci>
				</apply>
				<apply>
					<minus/>
					<ci>Jglut</ci>
					<ci>Jgk</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="Ge" cmeta:id="Ge">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="Ge" units="millimolar" public_interface="out"/>
		
		<variable name="gluper" units="dimensionless" initial_value="7.0"/>
		<variable name="gluamp" units="millimolar" initial_value="0.0"/>
		<variable name="glubasa1" units="millimolar" initial_value="7.0"/>
		<variable name="glustep" units="dimensionless" initial_value="0.0"/>
		<variable name="steptime" units="millisecond" initial_value="480000"/>
		<variable name="GeStep" units="millimolar"/>
		
		<variable name="time" units="millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>Ge</ci>
				<apply>
					<plus/>
					<ci>glubasa1</ci>
					<apply>
					    <times/>
					    <ci>gluamp</ci>
						<apply>
							<minus/>
							<cn cellml:units="dimensionless">1</cn>
							<ci>glustep</ci>
				        </apply>
						<apply>
							<cos/>
							<apply>
						        <divide/>
								<apply>
					                <times/>
					                <ci>time</ci>
									<cn cellml:units="dimensionless">2</cn>
									<pi/>
			                    </apply>
								<apply>
					                <times/>
					                <cn cellml:units="millisecond">60000</cn>
									<ci>gluper</ci>
								</apply>
							</apply>
						</apply>
					</apply>
					<ci>GeStep</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>GeStep</ci>
				<piecewise>
				    <piece>
					    <apply>
					        <times/>
					        <ci>glustep</ci>
					        <ci>gluamp</ci>
					    </apply>
					    <apply>
						    <gt/>
						    <apply>
							    <divide/>
							    <apply>
							        <minus/>
							        <ci>time</ci>
								    <ci>steptime</ci>
						        </apply>
							    <cn cellml:units="millisecond">1000.0</cn>
						    </apply>
							<cn cellml:units="dimensionless">1.0</cn>
					    </apply>
				    </piece>
					<piece>
					    <apply>
					        <times/>
							<apply>
							    <divide/>
							    <apply>
							        <minus/>
							        <ci>time</ci>
								    <ci>steptime</ci>
						        </apply>
							    <cn cellml:units="millisecond">1000.0</cn>
						    </apply>
					        <ci>glustep</ci>
					        <ci>gluamp</ci>
					    </apply>
						<apply>
						    <and/>
						    <apply>
						        <gt/>
								<apply>
							        <divide/>
							        <apply>
							            <minus/>
							            <ci>time</ci>
								        <ci>steptime</ci>
						            </apply>
							        <cn cellml:units="millisecond">1000.0</cn>
						        </apply>
								<cn cellml:units="dimensionless">0.0</cn>
					        </apply>
							<apply>
						        <lt/>
								<apply>
							        <divide/>
							        <apply>
							            <minus/>
							            <ci>time</ci>
								        <ci>steptime</ci>
						            </apply>
							        <cn cellml:units="millisecond">1000.0</cn>
						        </apply>
								<cn cellml:units="dimensionless">1.0</cn>
					        </apply>
						</apply>
				    </piece>
					<piece>
					    <cn cellml:units="millimolar">0.0</cn>
					    <apply>
						    <lt/>
						    <apply>
							    <divide/>
							    <apply>
							        <minus/>
							        <ci>time</ci>
								    <ci>steptime</ci>
						        </apply>
							    <cn cellml:units="millisecond">1000.0</cn>
						    </apply>
							<cn cellml:units="dimensionless">0.0</cn>
					    </apply>
				    </piece>
				</piecewise>
			</apply>
		</math>
	</component>

	<component name="G6P" cmeta:id="G6P">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="G6P" units="millimolar" initial_value="525.97" public_interface="out"/>
		<variable name="kappa" units="dimensionless" public_interface="in"/>
		<variable name="JPFK" units="micromolar_per_millisecond" public_interface="in"/>
		<variable name="Jgk" units="millimolar_per_millisecond" public_interface="in"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>G6P</ci>
				</apply>
				<apply>
					<times/>
					<ci>kappa</ci>
					<apply>
						<minus/>
						<ci>Jgk</ci>
						<ci>JPFK</ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="FBP" cmeta:id="FBP">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="FBP" units="micromolar" initial_value="0.2088" public_interface="out"/>
		<variable name="kappa" units="dimensionless" public_interface="in"/>
		<variable name="JPFK" units="micromolar_per_millisecond" public_interface="in"/>
		<variable name="JGPDH" units="micromolar_per_millisecond" public_interface="in"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>FBP</ci>
				</apply>
				<apply>
					<times/>
					<ci>kappa</ci>
					<apply>
						<minus/>
						<ci>JPFK</ci>
						<apply>
							<times/>
							<cn cellml:units="dimensionless">0.5</cn>
							<ci>JGPDH</ci>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="F6P" cmeta:id="F6P">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="F6P" units="millimolar" public_interface="out"/>
		<variable name="G6P" units="millimolar" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>F6P</ci>
				<apply>
					<times/>
					<cn cellml:units="dimensionless">0.3</cn>
					<ci>G6P</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="Jglut" cmeta:id="Jglut">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="Jglut" units="millimolar_per_millisecond" public_interface="out"/>
		<variable name="Kglut" units="millimolar" initial_value="7"/>
		<variable name="Vglut" units="millimolar_per_millisecond" initial_value="8"/>
		<variable name="Gi" units="millimolar" public_interface="in"/>
		<variable name="Ge" units="millimolar" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>Jglut</ci>
				<apply>
					<times/>
					<ci>Vglut</ci>
					<apply>
						<divide/>
						<apply>
					        <times/>
						    <apply>
							    <minus/>
							    <ci>Ge</ci>
							    <ci>Gi</ci>
						    </apply>
						    <ci>Kglut</ci>
					    </apply>
					    <apply>
						    <times/>
						    <apply>
							    <plus/>
							    <ci>Kglut</ci>
							    <ci>Ge</ci>
						    </apply>
						    <apply>
							    <plus/>
							    <ci>Kglut</ci>
							    <ci>Gi</ci>
						    </apply>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="Jgk" cmeta:id="Jgk">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="Jgk" units="millimolar_per_millisecond" public_interface="out"/>
		<variable name="Kgk" units="millimolar" initial_value="7"/>
		<variable name="Vgk" units="millimolar_per_millisecond" initial_value="0.8"/>
		<variable name="ngk" units="dimensionless" initial_value="4"/>
		<variable name="Gi" units="millimolar" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>Jgk</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>Vgk</ci>
						<apply>
							<power/>
							<ci>Gi</ci>
							<ci>ngk</ci>
						</apply>
					</apply>
					<apply>
						<plus/>
						<apply>
							<power/>
							<ci>Kgk</ci>
							<ci>ngk</ci>
						</apply>
						<apply>
							<power/>
							<ci>Gi</ci>
							<ci>ngk</ci>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="JGPDH" cmeta:id="JGPDH">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="JGPDH" units="micromolar_per_millisecond" public_interface="out"/>
		<variable name="FBP" units="micromolar" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>JGPDH</ci>
				<apply>
					<times/>
					<cn cellml:units="micromolar_per_millisecond">0.2</cn>
					<apply>
						<root/>
						<apply>
							<divide/>
							<ci>FBP</ci>
							<cn cellml:units="micromolar">1</cn>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="JPFK" cmeta:id="JPFK">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="JPFK" units="micromolar_per_millisecond" public_interface="out"/>
		
		<variable name="pfkbas" units="dimensionless" initial_value="0.06"/>
		<variable name="cat" units="micromolar_per_millisecond" initial_value="2"/>
		
		<variable name="topb" units="dimensionless" public_interface="in"/>
		<variable name="topa16" units="dimensionless" public_interface="in"/>
		<variable name="bottom16" units="dimensionless" public_interface="in"/>
		
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>JPFK</ci>
				<apply>
					<divide/>
					<apply>
						<plus/>
						<apply>
						    <times/>
						    <ci>pfkbas</ci>
							<ci>cat</ci>
							<ci>topa16</ci>
						</apply>
						<apply>
						    <times/>
						    <ci>cat</ci>
							<ci>topb</ci>
						</apply>
					</apply>
					<ci>bottom16</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="w">
		<variable name="topa16" units="dimensionless" public_interface="out"/>
		<variable name="bottom16" units="dimensionless" public_interface="out"/>
		<variable name="topb" units="dimensionless" public_interface="out"/>
		
		<variable name="weight1" units="dimensionless"/>
		<variable name="weight9" units="dimensionless"/>
		<variable name="weight5" units="dimensionless"/>
		<variable name="weight3" units="dimensionless"/>
		<variable name="weight2" units="dimensionless"/>
		<variable name="weight13" units="dimensionless"/>
		<variable name="weight11" units="dimensionless"/>
		<variable name="weight10" units="dimensionless"/>
		<variable name="weight6" units="dimensionless"/>
		<variable name="weight4" units="dimensionless"/>
		<variable name="weight15" units="dimensionless"/>
		<variable name="weight8" units="dimensionless"/>
		<variable name="weight12" units="dimensionless"/>
		<variable name="weight14" units="dimensionless"/>
		<variable name="weight16" units="dimensionless"/>
		<variable name="weight7" units="dimensionless"/>
		<variable name="topa1" units="dimensionless"/>
		<variable name="topa2" units="dimensionless"/>
		<variable name="topa3" units="dimensionless"/>
		<variable name="topa4" units="dimensionless"/>
		<variable name="topa5" units="dimensionless"/>
		<variable name="topa6" units="dimensionless"/>
		<variable name="topa7" units="dimensionless"/>
		<variable name="topa8" units="dimensionless"/>
		<variable name="topa9" units="dimensionless"/>
		<variable name="topa10" units="dimensionless"/>
		<variable name="topa11" units="dimensionless"/>
		<variable name="topa12" units="dimensionless"/>
		<variable name="topa13" units="dimensionless"/>
		<variable name="topa14" units="dimensionless"/>
		<variable name="topa15" units="dimensionless"/>
		<variable name="bottom1" units="dimensionless"/>
		<variable name="bottom2" units="dimensionless"/>
		<variable name="bottom3" units="dimensionless"/>
		<variable name="bottom4" units="dimensionless"/>
		<variable name="bottom5" units="dimensionless"/>
		<variable name="bottom6" units="dimensionless"/>
		<variable name="bottom7" units="dimensionless"/>
		<variable name="bottom8" units="dimensionless"/>
		<variable name="bottom9" units="dimensionless"/>
		<variable name="bottom10" units="dimensionless"/>
		<variable name="bottom11" units="dimensionless"/>
		<variable name="bottom12" units="dimensionless"/>
		<variable name="bottom13" units="dimensionless"/>
		<variable name="bottom14" units="dimensionless"/>
		<variable name="bottom15" units="dimensionless"/>
		<variable name="famp" units="dimensionless" initial_value="0.02"/>
		<variable name="ffbp" units="dimensionless" initial_value="0.2"/>
		<variable name="fmt" units="dimensionless" initial_value="20"/>
		<variable name="fbt" units="dimensionless" initial_value="20"/>
		<variable name="fatp" units="dimensionless" initial_value="20"/>
		<variable name="K1" units="micromolar" initial_value="30"/>
		<variable name="K2" units="micromolar" initial_value="1"/>
		<variable name="K3" units="micromolar" initial_value="50000"/>
		<variable name="K4" units="micromolar" initial_value="1000"/>
		
		<variable name="AMP" units="micromolar" public_interface="in"/>
		<variable name="FBP" units="micromolar" public_interface="in"/>
		<variable name="F6P" units="millimolar" public_interface="in"/>
		<variable name="ATP" units="micromolar" public_interface="in"/>
		
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>weight1</ci>
				<cn cellml:units="dimensionless">1</cn>
			</apply>
			<apply>
				<eq/>
				<ci>topa1</ci>
				<cn cellml:units="dimensionless">0</cn>
			</apply>
			<apply>
				<eq/>
				<ci>bottom1</ci>
				<cn cellml:units="dimensionless">1</cn>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight9</ci>
				<apply>
					<divide/>
					<ci>AMP</ci>
					<ci>K1</ci>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa9</ci>
				<ci>topa8</ci>
			</apply>
			<apply>
				<eq/>
				<ci>bottom9</ci>
				<apply>
					<plus/>
					<ci>bottom8</ci>
					<ci>weight9</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight5</ci>
				<apply>
					<divide/>
					<ci>FBP</ci>
					<ci>K2</ci>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa5</ci>
				<ci>topa4</ci>
			</apply>
			<apply>
				<eq/>
				<ci>bottom5</ci>
				<apply>
					<plus/>
					<ci>bottom4</ci>
					<ci>weight5</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight3</ci>
				<apply>
					<divide/>
					<apply>
						<power/>
						<ci>F6P</ci>
						<cn cellml:units="dimensionless">2</cn>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar">1</cn>
						<ci>K3</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa3</ci>
				<apply>
					<plus/>
					<ci>topa2</ci>
					<ci>weight3</ci>
			    </apply>
			</apply>
			<apply>
				<eq/>
				<ci>bottom3</ci>
				<apply>
					<plus/>
					<ci>bottom2</ci>
					<ci>weight3</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight2</ci>
				<apply>
					<divide/>
					<apply>
						<power/>
						<ci>ATP</ci>
						<cn cellml:units="dimensionless">2</cn>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar">1</cn>
						<ci>K4</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa2</ci>
				<ci>topa1</ci>
			</apply>
			<apply>
				<eq/>
				<ci>bottom2</ci>
				<apply>
					<plus/>
					<ci>bottom1</ci>
					<ci>weight2</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight13</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>AMP</ci>
						<ci>FBP</ci>
					</apply>
					<apply>
						<times/>
						<ci>K1</ci>
						<ci>K2</ci>
				    </apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa13</ci>
				<ci>topa12</ci>
			</apply>
			<apply>
				<eq/>
				<ci>bottom13</ci>
				<apply>
					<plus/>
					<ci>bottom12</ci>
					<ci>weight13</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight11</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>AMP</ci>
						<apply>
							<power/>
							<ci>F6P</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar">1</cn>
						<ci>K1</ci>
						<ci>K3</ci>
						<ci>famp</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa11</ci>
				<apply>
					<plus/>
					<ci>topa10</ci>
					<ci>weight11</ci>
			    </apply>
			</apply>
			<apply>
				<eq/>
				<ci>bottom11</ci>
				<apply>
					<plus/>
					<ci>bottom10</ci>
					<ci>weight11</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight10</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>AMP</ci>
						<apply>
							<power/>
							<ci>ATP</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar">1</cn>
						<ci>K1</ci>
						<ci>K4</ci>
						<ci>fmt</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa10</ci>
				<ci>topa9</ci>
			</apply>
			<apply>
				<eq/>
				<ci>bottom10</ci>
				<apply>
					<plus/>
					<ci>bottom9</ci>
					<ci>weight10</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight6</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>FBP</ci>
						<apply>
							<power/>
							<ci>ATP</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar">1</cn>
						<ci>K2</ci>
						<ci>K4</ci>
						<ci>fbt</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa6</ci>
				<ci>topa5</ci>
			</apply>
			<apply>
				<eq/>
				<ci>bottom6</ci>
				<apply>
					<plus/>
					<ci>bottom5</ci>
					<ci>weight6</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight4</ci>
				<apply>
					<divide/>
					<apply>
						<power/>
						<apply>
						    <times/>
						    <ci>F6P</ci>
							<ci>ATP</ci>
						</apply>
					    <cn cellml:units="dimensionless">2</cn>
				    </apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar2">1</cn>
						<ci>fatp</ci>
						<ci>K3</ci>
						<ci>K4</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa4</ci>
				<apply>
					<plus/>
					<ci>topa3</ci>
					<ci>weight4</ci>
			    </apply>
			</apply>
			<apply>
				<eq/>
				<ci>bottom4</ci>
				<apply>
					<plus/>
					<ci>bottom3</ci>
					<ci>weight4</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight7</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>FBP</ci>
						<apply>
							<power/>
							<ci>F6P</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar">1</cn>
						<ci>K2</ci>
						<ci>K3</ci>
						<ci>ffbp</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa7</ci>
				<apply>
					<plus/>
					<ci>topa6</ci>
					<ci>weight7</ci>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>bottom7</ci>
				<apply>
					<plus/>
					<ci>bottom6</ci>
					<ci>weight7</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight15</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>AMP</ci>
						<ci>FBP</ci>
						<apply>
							<power/>
							<ci>F6P</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar">1</cn>
						<ci>K1</ci>
						<ci>K2</ci>
						<ci>K3</ci>
						<ci>ffbp</ci>
						<ci>famp</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa15</ci>
				<ci>topa14</ci>
			</apply>
			<apply>
				<eq/>
				<ci>topb</ci>
				<ci>weight15</ci>
			</apply>
			<apply>
				<eq/>
				<ci>bottom15</ci>
				<apply>
					<plus/>
					<ci>bottom14</ci>
					<ci>weight15</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight8</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>FBP</ci>
						<apply>
							<power/>
							<ci>F6P</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
						<apply>
							<power/>
							<ci>ATP</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar2">1</cn>
						<ci>K2</ci>
						<ci>K3</ci>
						<ci>K4</ci>
						<ci>ffbp</ci>
						<ci>fbt</ci>
						<ci>fatp</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa8</ci>
				<apply>
					<plus/>
					<ci>topa7</ci>
					<ci>weight8</ci>
			    </apply>
			</apply>
			<apply>
				<eq/>
				<ci>bottom8</ci>
				<apply>
					<plus/>
					<ci>bottom7</ci>
					<ci>weight8</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight12</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>AMP</ci>
						<apply>
							<power/>
							<ci>F6P</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
						<apply>
							<power/>
							<ci>ATP</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar2">1</cn>
						<ci>K1</ci>
						<ci>K3</ci>
						<ci>K4</ci>
						<ci>famp</ci>
						<ci>fmt</ci>
						<ci>fatp</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa12</ci>
				<apply>
					<plus/>
					<ci>topa11</ci>
					<ci>weight12</ci>
			    </apply>
			</apply>
			<apply>
				<eq/>
				<ci>bottom12</ci>
				<apply>
					<plus/>
					<ci>bottom11</ci>
					<ci>weight12</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight14</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>AMP</ci>
						<ci>FBP</ci>
					    <apply>
							<power/>
							<ci>ATP</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar">1</cn>
						<ci>K1</ci>
						<ci>K2</ci>
						<ci>K4</ci>
						<ci>fbt</ci>
						<ci>fmt</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa14</ci>
				<ci>topa13</ci>
			</apply>
			<apply>
				<eq/>
				<ci>bottom14</ci>
				<apply>
					<plus/>
					<ci>bottom13</ci>
					<ci>weight14</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>weight16</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>AMP</ci>
						<ci>FBP</ci>
						<apply>
							<power/>
							<ci>F6P</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					    <apply>
							<power/>
							<ci>ATP</ci>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="millimolar2">1</cn>
						<ci>K1</ci>
						<ci>K2</ci>
						<ci>K3</ci>
						<ci>K4</ci>
						<ci>ffbp</ci>
						<ci>famp</ci>
						<ci>fbt</ci>
						<ci>fmt</ci>
						<ci>fatp</ci>
					</apply>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>topa16</ci>
				<apply>
					<plus/>
					<ci>topa15</ci>
					<ci>weight16</ci>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>bottom16</ci>
				<apply>
					<plus/>
					<ci>bottom15</ci>
					<ci>weight16</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="ATP" cmeta:id="ATP">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="ATP" units="micromolar" public_interface="out"/>
		<variable name="Atot" units="micromolar" initial_value="3000"/>
		<variable name="rad" units="micromolar"/>
		<variable name="ADP" units="micromolar" public_interface="in"/>
		
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>ATP</ci>
				<apply>
					<times/>
					<cn cellml:units="dimensionless">0.5</cn>
					<apply>
					    <minus/>
					    <apply>
						    <plus/>
							<ci>Atot</ci>
						    <ci>rad</ci>
						</apply>
						<ci>ADP</ci>
					</apply>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>rad</ci>
				<apply>
					<root/>
					<apply>
					    <minus/>
					    <apply>
						    <power/>
							<apply>
					            <minus/>
							    <ci>ADP</ci>
						        <ci>Atot</ci>
						    </apply>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
						<apply>
					        <times/>
							<cn cellml:units="dimensionless">4</cn>
							<apply>
						        <power/>
						        <ci>ADP</ci>
								<cn cellml:units="dimensionless">2</cn>
							</apply>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="AMP" cmeta:id="AMP">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="AMP" units="micromolar" public_interface="out"/>
		<variable name="ATP" units="micromolar" public_interface="in"/>
		<variable name="ADP" units="micromolar" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>AMP</ci>
				<apply>
					<divide/>
					<apply>
						<power/>
						<ci>ADP</ci>
						<cn cellml:units="dimensionless">2</cn>
					</apply>
					<ci>ATP</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="ADP" cmeta:id="ADP">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="ADP" units="micromolar" initial_value="537.6" public_interface="out"/>
		
		<variable name="y" units="dimensionless"/>
		<variable name="tau_a" units="millisecond" initial_value="300000"/>
		<variable name="r" units="dimensionless" initial_value="0.5"/>
		<variable name="r1" units="micromolar" initial_value="0.35"/>
		<variable name="autoadp" units="dimensionless" initial_value="1.0"/>
		<variable name="adpknot" units="micromolar" initial_value="800.0"/>
		<variable name="fback" units="dimensionless"/>
		<variable name="ky" units="dimensionless" initial_value="2.2"/>
		<variable name="kg" units="micromolar_per_millisecond" initial_value="0.1"/>
		
		<variable name="JGPDH" units="micromolar_per_millisecond" public_interface="in"/>
		<variable name="Ca" units="micromolar" public_interface="in"/>
		<variable name="ATP" units="micromolar" public_interface="in"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>ADP</ci>
				</apply>
				<apply>
					<plus/>
					<apply>
						<times/>
						<ci>autoadp</ci>
					    <apply>
						    <plus/>
						    <apply>
						        <divide/>
								<apply>
									<minus/>
									<ci>ATP</ci>
									<apply>
										<times/>
										<ci>ADP</ci>
										<apply>
											<exp/>
											<apply>
												<times/>
												<ci>fback</ci>
												<apply>
													<divide/>
													<apply>
														<minus/>
														<cn cellml:units="micromolar">1</cn>
														<ci>Ca</ci>
													</apply>
													<ci>r1</ci>
												</apply>
											</apply>
										</apply>
									</apply>
								</apply>
								<ci>tau_a</ci>
							</apply>
						</apply>
					</apply>
					<apply>
					    <times/>
						<cn cellml:units="first_order_rate_constant">1</cn>
						<apply>
							<minus/>
							<cn cellml:units="dimensionless">1</cn>
							<ci>autoadp</ci>
						</apply>
						<apply>
							<minus/>
							<ci>adpknot</ci>
							<ci>ADP</ci>
						</apply>
					</apply>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>y</ci>
				<apply>
					<divide/>
					<apply>
						<times/>
						<ci>ky</ci>
						<ci>JGPDH</ci>
					</apply>
					<apply>
						<plus/>
						<ci>kg</ci>
						<ci>JGPDH</ci>
					</apply>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>fback</ci>
				<apply>
					<plus/>
					<ci>r</ci>
					<ci>y</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="membrane" cmeta:id="membrane">
		<variable name="v" units="millivolt" initial_value="-66.7" public_interface="out"/>
		<variable name="cm" units="femtofarad" initial_value="5300"/>
		<variable name="I_Ca" units="femtoampere" public_interface="in"/>
		<variable name="I_K" units="femtoampere" public_interface="in"/>
		<variable name="I_K_Ca" units="femtoampere" public_interface="in"/>
		<variable name="I_K_ATP" units="femtoampere" public_interface="in"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>v</ci>
				</apply>
				<apply>
					<divide/>
					<apply>
						<minus/>
						<apply>
							<plus/>
							<ci>I_K</ci>
							<ci>I_Ca</ci>
							<ci>I_K_Ca</ci>
							<ci>I_K_ATP</ci>
						</apply>
					</apply>
					<ci>cm</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="I_K" cmeta:id="I_K">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="I_K" units="femtoampere" public_interface="out"/>
		<variable name="gK" units="picosiemens" initial_value="2700"/>
		<variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
		<variable name="vK" units="millivolt" public_interface="in"/>
		<variable name="v" units="millivolt" public_interface="in" private_interface="out"/>
		<variable name="n" units="dimensionless" private_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>I_K</ci>
				<apply>
					<times/>
					<ci>gK</ci>
					<ci>n</ci>
					<apply>
						<minus/>
						<ci>v</ci>
						<ci>vK</ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="n" cmeta:id="n">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="n" units="dimensionless" initial_value="0.00012" public_interface="out"/>
		<variable name="n_infinity" units="dimensionless"/>
		<variable name="tau_n" units="millisecond"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<variable name="v" units="millivolt" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>n</ci>
				</apply>
				<apply>
					<divide/>
					<apply>
						<minus/>
						<ci>n_infinity</ci>
						<ci>n</ci>
					</apply>
					<ci>tau_n</ci>
				</apply>
			</apply>
			<apply>
				<eq/>
				<ci>tau_n</ci>
				<apply>
					<divide/>
					<cn cellml:units="millisecond">1</cn>
					<apply>
						<times/>
						<cn cellml:units="dimensionless">0.035</cn>
						<apply>
							<cosh/>
							<apply>
								<divide/>
								<apply>
									<minus/>
									<ci>v</ci>
									<cn cellml:units="millivolt">-16</cn>
								</apply>
								<cn cellml:units="millivolt">22.4</cn>
							</apply>
						</apply>
					</apply>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>n_infinity</ci>
				<apply>
					<times/>
					<cn cellml:units="dimensionless">0.5</cn>
					<apply>
						<plus/>
						<cn cellml:units="dimensionless">1</cn>
						<apply>
							<tanh/>
							<apply>
								<divide/>
								<apply>
									<minus/>
									<ci>v</ci>
									<cn cellml:units="millivolt">-16</cn>
								</apply>
								<cn cellml:units="millivolt">11.2</cn>
							</apply>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="I_Ca" cmeta:id="I_Ca">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="I_Ca" units="femtoampere" public_interface="out"/>
		<variable name="gCa" units="picosiemens" initial_value="1000"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<variable name="vCa" units="millivolt" public_interface="in"/>
		<variable name="v" units="millivolt" public_interface="in" private_interface="out"/>
		<variable name="m_infinity" units="dimensionless" private_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>I_Ca</ci>
				<apply>
					<times/>
					<ci>gCa</ci>
					<ci>m_infinity</ci>
					<apply>
						<minus/>
						<ci>v</ci>
						<ci>vCa</ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="m" cmeta:id="m">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="m_infinity" units="dimensionless" public_interface="out"/>
		<variable name="v" units="millivolt" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>m_infinity</ci>
				<apply>
					<times/>
					<cn cellml:units="dimensionless">0.5</cn>
					<apply>
						<plus/>
						<cn cellml:units="dimensionless">1</cn>
						<apply>
							<tanh/>
							<apply>
								<divide/>
								<apply>
									<minus/>
									<ci>v</ci>
							        <cn cellml:units="millivolt">-20</cn>
							    </apply>
								<cn cellml:units="millivolt">24</cn>
							</apply>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="I_K_Ca" cmeta:id="I_K_Ca">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="I_K_Ca" units="femtoampere" public_interface="out"/>
		<variable name="gkCa" units="picosiemens" initial_value="400"/>
		<variable name="KD" units="micromolar" initial_value="0.5"/>
		<variable name="nh" units="dimensionless" initial_value="2.0"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<variable name="vK" units="millivolt" public_interface="in"/>
		<variable name="Ca" units="micromolar" public_interface="in"/>
		<variable name="v" units="millivolt" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>I_K_Ca</ci>
				<apply>
					<times/>
					<apply>
					    <divide/>
						<ci>gkCa</ci>
						<apply>
						    <plus/>
							<cn cellml:units="dimensionless">1</cn>
							<apply>
							    <power/>
								<apply>
					                <divide/>
									<ci>KD</ci>
									<ci>Ca</ci>
								</apply>
								<ci>nh</ci>
						    </apply>
						</apply>
					</apply>
					<apply>
						<minus/>
						<ci>v</ci>
						<ci>vK</ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="I_K_ATP" cmeta:id="I_K_ATP">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="I_K_ATP" units="femtoampere" public_interface="out"/>
		<variable name="gkATP_bar" units="picosiemens" initial_value="2000"/>
		<variable name="katpo" units="dimensionless"/>
		<variable name="topo" units="dimensionless"/>
		<variable name="bottomo" units="dimensionless"/>
		<variable name="MgADP" units="micromolar"/>
		<variable name="ADP3" units="micromolar"/>
		<variable name="ATP4" units="micromolar"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<variable name="vK" units="millivolt" public_interface="in"/>
		<variable name="ATP" units="micromolar" public_interface="in"/>
		<variable name="ADP" units="micromolar" public_interface="in"/>
		<variable name="v" units="millivolt" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>I_K_ATP</ci>
				<apply>
					<times/>
					<ci>gkATP_bar</ci>
					<ci>katpo</ci>
					<apply>
						<minus/>
						<ci>v</ci>
						<ci>vK</ci>
					</apply>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>katpo</ci>
				<apply>
					<times/>
					<cn cellml:units="dimensionless">20.0</cn>
					<apply>
					    <divide/>
						<ci>topo</ci>
						<ci>bottomo</ci>
					</apply>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>topo</ci>
				<apply>
				    <plus/>
					<apply>
						<times/>
						<cn cellml:units="dimensionless">0.08</cn>
						<apply>
							<plus/>
							<cn cellml:units="dimensionless">1</cn>
							<apply>
								<divide/>
								<apply>
									<times/>
									<cn cellml:units="dimensionless">2</cn>
									<ci>MgADP</ci>
								</apply>
								<cn cellml:units="micromolar">17</cn>
							</apply>
						</apply>
					</apply>
					<apply>
						<times/>
						<cn cellml:units="dimensionless">0.89</cn>
						<apply>
							<power/>
							<apply>
								<divide/>
								<ci>MgADP</ci>
								<cn cellml:units="micromolar">17</cn>
							</apply>
							<cn cellml:units="dimensionless">2</cn>
						</apply>
					</apply>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>bottomo</ci>
				<apply>
					<times/>
					<apply>
						<power/>
						<apply>
						    <plus/>
							<cn cellml:units="dimensionless">1</cn>
							<apply>
								<divide/>
								<ci>MgADP</ci>
								<cn cellml:units="micromolar">17</cn>
						    </apply>
						</apply>
						<cn cellml:units="dimensionless">2</cn>
					</apply>
				    <apply>
						<plus/>
						<cn cellml:units="dimensionless">1</cn>
						<apply>
							<divide/>
							<ci>ADP3</ci>
							<cn cellml:units="micromolar">26</cn>
						</apply>
						<apply>
							<divide/>
							<ci>ATP4</ci>
							<cn cellml:units="micromolar">1</cn>
						</apply>
					</apply>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>MgADP</ci>
				<apply>
					<times/>
					<cn cellml:units="dimensionless">0.165</cn>
					<ci>ADP</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>ADP3</ci>
				<apply>
					<times/>
					<cn cellml:units="dimensionless">0.135</cn>
					<ci>ADP</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>ATP4</ci>
				<apply>
					<times/>
					<cn cellml:units="dimensionless">0.05</cn>
					<ci>ATP</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="Ca" cmeta:id="Ca">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="Ca" units="micromolar" initial_value="0.05626" public_interface="out"/>
		<variable name="fcyt" units="dimensionless" initial_value="0.01"/>
		<variable name="Jmem" units="micromolar_per_millisecond" public_interface="in"/>
		<variable name="Jer" units="micromolar_per_millisecond" public_interface="in"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>Ca</ci>
				</apply>
				<apply>
					<times/>
					<ci>fcyt</ci>
					<apply>
						<plus/>
						<ci>Jmem</ci>
						<ci>Jer</ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="Caer" cmeta:id="Caer">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="Caer" units="micromolar" initial_value="121.8" public_interface="out"/>
		<variable name="fer" units="dimensionless" initial_value="0.01"/>
		<variable name="sigmav" units="dimensionless" initial_value="31"/>
		<variable name="Jer" units="micromolar_per_millisecond" public_interface="in"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>Caer</ci>
				</apply>
				<apply>
					<times/>
					<apply>
						<minus/>
						<ci>fer</ci>
					</apply>
					<ci>sigmav</ci>
					<ci>Jer</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="Jmem" cmeta:id="Jmem">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="Jmem" units="micromolar_per_millisecond" public_interface="out"/>
		<variable name="kPMCA" units="first_order_rate_constant" initial_value="0.18"/>
		<variable name="alpha" units="micromolar_per_millisecond" initial_value="4.5e-6"/>
		<variable name="Ca" units="micromolar" public_interface="in"/>
		<variable name="I_Ca" units="femtoampere" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>Jmem</ci>
				<apply>
					<minus/>
					<apply>
						<plus/>
						<apply>
							<times/>
							<ci>alpha</ci>
							<cn cellml:units="per_femtoampere">1</cn>
							<ci>I_Ca</ci>
						</apply>
						<apply>
							<times/>
							<ci>kPMCA</ci>
							<ci>Ca</ci>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="Jer" cmeta:id="Jer">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="Jer" units="micromolar_per_millisecond" public_interface="out"/>
		<variable name="Jleak" units="micromolar_per_millisecond" public_interface="in"/>
		<variable name="JSERCA" units="micromolar_per_millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>Jer</ci>
				<apply>
					<minus/>
					<ci>Jleak</ci>
					<ci>JSERCA</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="JSERCA" cmeta:id="JSERCA">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="JSERCA" units="micromolar_per_millisecond" public_interface="out"/>
		<variable name="kSERCA" units="first_order_rate_constant" initial_value="0.4"/>
		<variable name="Ca" units="micromolar" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>JSERCA</ci>
				<apply>
					<times/>
					<ci>kSERCA</ci>
					<ci>Ca</ci>
				</apply>
			</apply>
		</math>
	</component>

	<component name="Jleak" cmeta:id="Jleak">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="Jleak" units="micromolar_per_millisecond" public_interface="out"/>
		<variable name="pleak" units="first_order_rate_constant" initial_value="0.0002"/>
		<variable name="Ca" units="micromolar" public_interface="in"/>
		<variable name="Caer" units="micromolar" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>Jleak</ci>
				<apply>
					<times/>
					<ci>pleak</ci>
					<apply>
						<minus/>
						<ci>Caer</ci>
						<ci>Ca</ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="I" cmeta:id="I">
		<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		</rdf:RDF>
		<variable name="I" units="dimensionless" initial_value="0.316" public_interface="out"/>
		<variable name="I_infinity" units="dimensionless"/>
		<variable name="tau_I" units="millisecond" initial_value="10000"/>
		<variable name="I_max" units="dimensionless" initial_value="20"/>
		<variable name="delta" units="dimensionless" initial_value="8.0"/>
		<variable name="ki" units="micromolar" initial_value="0.1"/>
		<variable name="Ca" units="micromolar" public_interface="in"/>
		<variable name="time" units="millisecond" public_interface="in"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>I</ci>
				</apply>
				<apply>
					<divide/>
					<apply>
						<minus/>
						<ci>I_infinity</ci>
						<ci>I</ci>
					</apply>
					<ci>tau_I</ci>
				</apply>
			</apply>
			
			<apply>
				<eq/>
				<ci>I_infinity</ci>
				<apply>
					<times/>
					<ci>I_max</ci>
					<apply>
					    <divide/>
						<apply>
							<power/>
							<ci>Ca</ci>
							<ci>delta</ci>
						</apply>
						<apply>
							<plus/>
							<apply>
							    <power/>
								<ci>ki</ci>
								<ci>delta</ci>
							</apply>
						    <apply>
							    <power/>
								<ci>Ca</ci>
								<ci>delta</ci>
							</apply>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<component name="model_parameters">
		<variable name="kappa" units="dimensionless" initial_value="0.005" public_interface="out"/>
		<variable name="vK" units="millivolt" initial_value="-75" public_interface="out"/>
		<variable name="vCa" units="millivolt" initial_value="25" public_interface="out"/>
	</component>

	<group xmlns="http://www.cellml.org/cellml/1.0#">
		<relationship_ref relationship="encapsulation"/>
		<component_ref component="I_Ca">
			<component_ref component="m"/>
		</component_ref>
		<component_ref component="I_K">
			<component_ref component="n"/>
		</component_ref>
	</group>
    
	<connection> 
		<map_components component_1="Gi" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="Ge" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="G6P" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="FBP" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="ADP" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="membrane" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="I_K" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="I_Ca" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="I_K_Ca" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="I_K_ATP" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="Ca" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="Caer" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="I" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection> 
		<map_components component_1="Gi" component_2="Jgk"/>
		<map_variables variable_1="Gi" variable_2="Gi"/>
		<map_variables variable_1="Jgk" variable_2="Jgk"/>
	</connection>
	<connection> 
		<map_components component_1="Gi" component_2="Jglut"/>
		<map_variables variable_1="Gi" variable_2="Gi"/>
		<map_variables variable_1="Jglut" variable_2="Jglut"/>
	</connection>
	<connection> 
		<map_components component_1="G6P" component_2="Jgk"/>
		<map_variables variable_1="Jgk" variable_2="Jgk"/>
	</connection>
	<connection> 
		<map_components component_1="G6P" component_2="JPFK"/>
		<map_variables variable_1="JPFK" variable_2="JPFK"/>
	</connection>
	<connection> 
		<map_components component_1="G6P" component_2="model_parameters"/>
		<map_variables variable_1="kappa" variable_2="kappa"/>
	</connection>
	<connection> 
		<map_components component_1="G6P" component_2="F6P"/>
		<map_variables variable_1="G6P" variable_2="G6P"/>
	</connection>
	<connection> 
		<map_components component_1="FBP" component_2="JGPDH"/>
		<map_variables variable_1="FBP" variable_2="FBP"/>
		<map_variables variable_1="JGPDH" variable_2="JGPDH"/>
	</connection>
	<connection> 
		<map_components component_1="FBP" component_2="JPFK"/>
		<map_variables variable_1="JPFK" variable_2="JPFK"/>
	</connection>
	<connection> 
		<map_components component_1="FBP" component_2="model_parameters"/>
		<map_variables variable_1="kappa" variable_2="kappa"/>
	</connection>
	<connection> 
		<map_components component_1="Jglut" component_2="Ge"/>
		<map_variables variable_1="Ge" variable_2="Ge"/>
	</connection>
	<connection> 
		<map_components component_1="JPFK" component_2="w"/>
		<map_variables variable_1="topa16" variable_2="topa16"/>
		<map_variables variable_1="topb" variable_2="topb"/>
		<map_variables variable_1="bottom16" variable_2="bottom16"/>
	</connection>
	<connection> 
		<map_components component_1="w" component_2="AMP"/>
		<map_variables variable_1="AMP" variable_2="AMP"/>
	</connection>
	<connection> 
		<map_components component_1="w" component_2="ATP"/>
		<map_variables variable_1="ATP" variable_2="ATP"/>
	</connection>
	<connection> 
		<map_components component_1="w" component_2="F6P"/>
		<map_variables variable_1="F6P" variable_2="F6P"/>
	</connection>
	<connection> 
		<map_components component_1="w" component_2="FBP"/>
		<map_variables variable_1="FBP" variable_2="FBP"/>
	</connection>
	<connection> 
		<map_components component_1="ATP" component_2="AMP"/>
		<map_variables variable_1="ATP" variable_2="ATP"/>
    </connection>
	<connection> 
		<map_components component_1="ATP" component_2="ADP"/>
		<map_variables variable_1="ATP" variable_2="ATP"/>
		<map_variables variable_1="ADP" variable_2="ADP"/>
	</connection>
	<connection> 
		<map_components component_1="AMP" component_2="ADP"/>
		<map_variables variable_1="ADP" variable_2="ADP"/>
	</connection>
	<connection> 
		<map_components component_1="ADP" component_2="Ca"/>
		<map_variables variable_1="Ca" variable_2="Ca"/>
	</connection>
	<connection> 
		<map_components component_1="membrane" component_2="I_Ca"/>
		<map_variables variable_1="I_Ca" variable_2="I_Ca"/>
		<map_variables variable_1="v" variable_2="v"/>
	</connection>
	<connection> 
		<map_components component_1="membrane" component_2="I_K"/>
		<map_variables variable_1="I_K" variable_2="I_K"/>
		<map_variables variable_1="v" variable_2="v"/>
	</connection>
	<connection> 
		<map_components component_1="membrane" component_2="I_K_Ca"/>
		<map_variables variable_1="I_K_Ca" variable_2="I_K_Ca"/>
		<map_variables variable_1="v" variable_2="v"/>
	</connection>
	<connection> 
		<map_components component_1="membrane" component_2="I_K_ATP"/>
		<map_variables variable_1="I_K_ATP" variable_2="I_K_ATP"/>
		<map_variables variable_1="v" variable_2="v"/>
	</connection>
	<connection> 
		<map_components component_1="I_K" component_2="model_parameters"/>
		<map_variables variable_1="vK" variable_2="vK"/>
	</connection>
	<connection> 
		<map_components component_1="n" component_2="I_K"/>
		<map_variables variable_1="n" variable_2="n"/>
		<map_variables variable_1="time" variable_2="time"/>
		<map_variables variable_1="v" variable_2="v"/>
	</connection>
	<connection> 
		<map_components component_1="I_Ca" component_2="model_parameters"/>
		<map_variables variable_1="vCa" variable_2="vCa"/>
	</connection>
	<connection> 
		<map_components component_1="m" component_2="I_Ca"/>
		<map_variables variable_1="m_infinity" variable_2="m_infinity"/>
		<map_variables variable_1="v" variable_2="v"/>
	</connection>
	<connection> 
		<map_components component_1="I_K_Ca" component_2="model_parameters"/>
		<map_variables variable_1="vK" variable_2="vK"/>
	</connection>
	<connection> 
		<map_components component_1="I_K_Ca" component_2="Ca"/>
		<map_variables variable_1="Ca" variable_2="Ca"/>
	</connection>
	<connection> 
		<map_components component_1="I_K_ATP" component_2="model_parameters"/>
		<map_variables variable_1="vK" variable_2="vK"/>
	</connection>
	<connection> 
		<map_components component_1="I_K_ATP" component_2="ATP"/>
		<map_variables variable_1="ATP" variable_2="ATP"/>
	</connection>
	<connection> 
		<map_components component_1="I_K_ATP" component_2="ADP"/>
		<map_variables variable_1="ADP" variable_2="ADP"/>
	</connection>
	<connection> 
		<map_components component_1="ADP" component_2="JGPDH"/>
		<map_variables variable_1="JGPDH" variable_2="JGPDH"/>
	</connection>
	<connection> 
		<map_components component_1="Ca" component_2="Jmem"/>
		<map_variables variable_1="Ca" variable_2="Ca"/>
		<map_variables variable_1="Jmem" variable_2="Jmem"/>
	</connection>
	<connection> 
		<map_components component_1="Ca" component_2="Jer"/>
		<map_variables variable_1="Jer" variable_2="Jer"/>
	</connection>
	<connection> 
		<map_components component_1="Caer" component_2="Jer"/>
		<map_variables variable_1="Jer" variable_2="Jer"/>
	</connection>
	<connection> 
		<map_components component_1="Jer" component_2="Jleak"/>
		<map_variables variable_1="Jleak" variable_2="Jleak"/>
	</connection>
	<connection> 
		<map_components component_1="Jer" component_2="JSERCA"/>
		<map_variables variable_1="JSERCA" variable_2="JSERCA"/>
	</connection>
	<connection> 
		<map_components component_1="Ca" component_2="JSERCA"/>
		<map_variables variable_1="Ca" variable_2="Ca"/>
	</connection>
	<connection> 
		<map_components component_1="Ca" component_2="Jleak"/>
		<map_variables variable_1="Ca" variable_2="Ca"/>
	</connection>
	<connection> 
		<map_components component_1="Caer" component_2="Jleak"/>
		<map_variables variable_1="Caer" variable_2="Caer"/>
	</connection>
	<connection> 
		<map_components component_1="Ca" component_2="I"/>
		<map_variables variable_1="Ca" variable_2="Ca"/>
	</connection>
	<connection> 
		<map_components component_1="I_Ca" component_2="Jmem"/>
		<map_variables variable_1="I_Ca" variable_2="I_Ca"/>
	</connection>

	<!-- metadata -->
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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		<rdf:Description rdf:about="rdf:#e436f2b2-66b8-4d7b-bb5d-8bbfe375e658">
			<bqs:Pubmed_id xmlns:bqs="http://www.cellml.org/bqs/1.0#">15834002</bqs:Pubmed_id>
			<bqs:JournalArticle xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:resource="rdf:#e4332344-ead5-4639-b20b-50e02d355aa7"/>
		</rdf:Description>
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	</rdf:RDF>

</model>