<?xml version="1.0" encoding="utf-8"?>
<!--  FILE :  revilla_garcia-ramos_2003.cellml

CREATED :  25th October 2004

LAST MODIFIED : 7th January 2010

AUTHOR :  Catherine Lloyd
	    Bioengineering Institute
	    The University of Auckland

MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Revilla and Garcia-Ramos's 2003 dynamic model for HIV-1 therapy.
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#"  cmeta:id="revilla_2003" name="revilla_2003">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Fighting a virus with a virus: a dynamic model for HIV-1 therapy</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>This model has been built with the differential expressions in Revilla and Garcia-Ramos' 2003 paper for a dynamic model for HIV-1 therapy. This file is known to run in OpenCell to reproduce all panels in figure 2. The units have been checked and they are consistent. The initial conditions [x, y, z, v, w] can be altered to replicate the different panels [single infected system (a): x=200, y=0, z=0, v=10^-6, w=0], [system with double infection (b): x=3, y=6, z=0, v=149, w=1], [alternate system with double infection (c): same as b, but alpha=0.016], and current parameterization is set to replicate figure2b. Note that in the paper, the figure diagrams are scaled logarithmically.  Note that the model also runs in COR, but due to the unit of time being days, the timescale is a problem for the CellML model simulation to recreate the published model results.</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>ABSTRACT: A mathematical model examined a potential therapy for controlling viral infections using genetically modified viruses. The control of the infection is an indirect effect of the selective elimination by an engineered virus of infected cells that are the source of the pathogens. Therefore, this engineered virus could greatly compensate for a dysfunctional immune system compromised by AIDS. In vitro studies using engineered viruses have been shown to decrease the HIV-1 load about 1000-fold. However, the efficacy of this potential treatment for reducing the viral load in AIDS patients is unknown. The present model studied the interactions among the HIV-1 virus, its main host cell (activated CD4+ T cells), and a therapeutic engineered virus in an in vivo context; and it examined the conditions for controlling the pathogen. This model predicted a significant drop in the HIV-1 load, but the treatment does not eradicate HIV. A basic estimation using a currently engineered virus indicated an HIV-1 load reduction of 92% and a recovery of host cells to 17% of their normal level. Greater success (98% HIV reduction, 44% host cells recovery) is expected as more competent engineered viruses are designed. These results suggest that therapy using viruses could be an alternative to extend the survival of AIDS patients.</para>
				
				<para>The original paper reference is cited below:</para>
				
				<para>Fighting a virus with a virus: a dynamic model for HIV-1 therapy, Tomas Revilla and Gisela Garcia-Ramos, 2003, <emphasis>Mathematical Biosciences</emphasis>, 185, 191-203. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/12941536">PubMed ID: 12941536</ulink></para>
				<informalfigure float="0" id="fig_cell_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>cell diagram</title>
							</objectinfo>
							<imagedata fileref="revilla_2003.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of a model for a double viral infection. Pathogen viral particles V infect normal host cells X, producing single-infected cells Y. These are then infected with the recombinant virus W to become double-infected cells Z. Double-infected cells can produce recombinant viral particles but not pathogen viral particles</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>


	<!-- units -->
	<units name="day">
		<unit multiplier="86400.0" units="second"/>
	</units>
	
	<units name="first_order_rate_constant">
		<unit exponent="-1" units="day"/>
	</units>
	
	<units base_units="yes" name="vir"/>
	
	<units base_units="yes" name="cell"/>
	
	<units name="mm3">
		<unit exponent="3" prefix="milli" units="metre"/>
    </units>
	
	<units name="per_mm3">
		<unit exponent="-3" prefix="milli" units="metre"/>
    </units>
	
	<units name="cell_per_mm3_day">
		<unit units="cell"/>
		<unit exponent="-3" prefix="milli" units="metre"/>
		<unit exponent="-1" units="day"/>
	</units>
	
	<units name="vir_per_cell_day">
		<unit units="vir"/>
		<unit exponent="-1" units="cell"/>
		<unit exponent="-1" units="day"/>
	</units>
	
	<units name="mm3_per_vir_day">
		<unit exponent="3" prefix="milli" units="metre"/>
		<unit exponent="-1" units="vir"/>
		<unit exponent="-1" units="day"/>
	</units>
	
	<component name="environment">
		<variable cmeta:id="environment_time" name="time" public_interface="out" units="day"/>
	</component>


	<!-- components -->
	<component cmeta:id="x" name="x">
		
		<variable cmeta:id="x_x" initial_value="3" name="x" public_interface="out" units="cell"/>
		<variable initial_value="2.0" name="lamda" units="cell_per_mm3_day"/>
		<variable initial_value="0.01" name="d" units="first_order_rate_constant"/>
		<variable name="beta" public_interface="in" units="mm3_per_vir_day"/>
		<variable name="v" public_interface="in" units="vir"/>
		<variable name="time" public_interface="in" units="day"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>x</ci>
				</apply>
				<apply>
					<minus/>
					<apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mm3">1</cn>
					    <ci> lamda </ci>
					</apply>
					<apply>
						<plus/>
						<apply>
							<times/>
							<ci> d </ci>
							<ci> x </ci>
						</apply>
						<apply>
							<times/>
							<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_mm3">1</cn>
							<ci> beta </ci>
							<ci> x </ci>
							<ci> v </ci>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>
	
	<component cmeta:id="y" name="y">
		
		<variable cmeta:id="y_y" initial_value="6" name="y" public_interface="out" units="cell"/>
		<variable initial_value="0.33" name="a" units="first_order_rate_constant"/>
		<variable name="beta" public_interface="in" units="mm3_per_vir_day"/>
		<variable name="alpha" public_interface="in" units="mm3_per_vir_day"/>
		<variable name="v" public_interface="in" units="vir"/>
		<variable name="w" public_interface="in" units="vir"/>
		<variable name="x" public_interface="in" units="cell"/>
		<variable name="time" public_interface="in" units="day"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>y</ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<times/>
						<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_mm3">1</cn>
						<ci> beta </ci>
						<ci> x </ci>
						<ci> v </ci>
					</apply>
					<apply>
						<plus/>
						<apply>
							<times/>
							<ci> a </ci>
							<ci> y </ci>
						</apply>
						<apply>
							<times/>
							<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_mm3">1</cn>
							<ci> alpha </ci>
							<ci> w </ci>
							<ci> y </ci>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>
	
	<component cmeta:id="z" name="z">
		
		<variable cmeta:id="z_z" initial_value="0" name="z" public_interface="out" units="cell"/>
		<variable initial_value="2.0" name="b" units="first_order_rate_constant"/>
		<variable name="alpha" public_interface="in" units="mm3_per_vir_day"/>
		<variable name="y" public_interface="in" units="cell"/>
		<variable name="w" public_interface="in" units="vir"/>
		<variable name="time" public_interface="in" units="day"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>z</ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<times/>
						<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_mm3">1</cn>
						<ci> alpha </ci>
						<ci> w </ci>
						<ci> y </ci>
					</apply>
					<apply>
						<times/>
						<ci> b </ci>
						<ci> z </ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>
	
	<component cmeta:id="v" name="v">
		
		<variable cmeta:id="v_v" initial_value="149" name="v" public_interface="out" units="vir"/>
		<variable initial_value="50.0" name="k" units="vir_per_cell_day"/>
		<variable initial_value="2.0" name="u" units="first_order_rate_constant"/>
		<variable name="y" public_interface="in" units="cell"/>
		<variable name="time" public_interface="in" units="day"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>v</ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<times/>
						<ci> k </ci>
						<ci> y </ci>
					</apply>
					<apply>
						<times/>
						<ci> u </ci>
						<ci> v </ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>
	
	<component cmeta:id="w" name="w">
		
		<variable cmeta:id="w_w" initial_value="1" name="w" public_interface="out" units="vir"/>
		<variable initial_value="2000.0" name="c" units="vir_per_cell_day"/>
		<variable initial_value="2.0" name="q" units="first_order_rate_constant"/>
		<variable name="z" public_interface="in" units="cell"/>
		<variable name="time" public_interface="in" units="day"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
						<ci>time</ci>
					</bvar>
					<ci>w</ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<times/>
						<ci> c </ci>
						<ci> z </ci>
					</apply>
					<apply>
						<times/>
						<ci> q </ci>
						<ci> w </ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>
	
	<component name="model_parameters">
		<variable initial_value="0.004" name="alpha" public_interface="out" units="mm3_per_vir_day"/>
		<variable initial_value="0.004" name="beta" public_interface="out" units="mm3_per_vir_day"/>
	</component>


	<!-- connections -->
	<connection>
		<map_components component_1="x" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="y" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="z" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="v" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="w" component_2="environment"/>
		<map_variables variable_1="time" variable_2="time"/>
	</connection>
	<connection>
		<map_components component_1="x" component_2="model_parameters"/>
		<map_variables variable_1="beta" variable_2="beta"/>
	</connection>
	<connection>
		<map_components component_1="y" component_2="model_parameters"/>
		<map_variables variable_1="beta" variable_2="beta"/>
		<map_variables variable_1="alpha" variable_2="alpha"/>
	</connection>
	<connection>
		<map_components component_1="z" component_2="model_parameters"/>
		<map_variables variable_1="alpha" variable_2="alpha"/>
	</connection>
	<connection>
		<map_components component_1="x" component_2="v"/>
		<map_variables variable_1="v" variable_2="v"/>
	</connection>
	<connection>
		<map_components component_1="y" component_2="x"/>
		<map_variables variable_1="x" variable_2="x"/>
	</connection>
	<connection>
		<map_components component_1="y" component_2="w"/>
		<map_variables variable_1="w" variable_2="w"/>
	</connection>
	<connection>
		<map_components component_1="y" component_2="v"/>
		<map_variables variable_1="v" variable_2="v"/>
		<map_variables variable_1="y" variable_2="y"/>
	</connection>
	<connection>
		<map_components component_1="z" component_2="w"/>
		<map_variables variable_1="w" variable_2="w"/>
		<map_variables variable_1="z" variable_2="z"/>
	</connection>
	<connection>
		<map_components component_1="z" component_2="y"/>
		<map_variables variable_1="y" variable_2="y"/>
	</connection>


	<!-- metadata -->
	


	

<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:about="rdf:#64e87ca7-e5f7-4ec6-bd95-542c8bb22fd5">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given>
<Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family>
</rdf:Description>
<rdf:Description rdf:about="#x">
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">normal cell</alternative>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">x</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#d6a77155-6ab4-4904-8560-c3993e325ee5">
<subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type>
<rdf:value>
<rdf:Description rdf:about="rdf:#efa592a2-8073-4c4b-ba2d-c03c6aae6e4e"/>
</rdf:value>
</rdf:Description>
<rdf:Description rdf:nodeID="n1">
<rdf:first>
<rdf:Description rdf:nodeID="n2"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:about="rdf:#37f4b0c8-ba56-4cf1-9c7c-6b71eeba9c8a">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Tomas</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Revilla</Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#5356b997-63c7-4447-a113-e5a214518e7e">
<ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#e0dfd05e-ef74-4664-8306-e9368d7be67e"/>
</ORG>
<EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#99e069e7-6b38-4dd7-943d-cca6076087eb"/>
</EMAIL>
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#64e87ca7-e5f7-4ec6-bd95-542c8bb22fd5"/>
</N>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n1"/>
</boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="">
<created xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#6e80958a-b211-4789-9919-61f3987dffbf"/>
</created>
<publisher xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Auckland Bioengineering Institute, The University of Auckland</publisher>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#5356b997-63c7-4447-a113-e5a214518e7e"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en"> Revilla and Garcia-Ramos's 2003 dynamic model for HIV-1 therapy. </title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#7235b7a5-a277-4c1b-bf5c-df0c4ed47c26">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2003-10</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#4f2f6f57-42c0-46ea-ad9b-39306f08187c">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Mathematical Biosciences</title>
</rdf:Description>
<rdf:Description rdf:about="#v">
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">pathogen virus</alternative>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">v</title>
</rdf:Description>
<rdf:Description rdf:about="#y">
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">single-infected cell</alternative>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">y</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e0dfd05e-ef74-4664-8306-e9368d7be67e">
<Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The Bioengineering Institute</Orgunit>
<Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname>
</rdf:Description>
<rdf:Description rdf:about="#z">
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">double-infected cell</alternative>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">z</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#2a9a0916-900a-463f-9382-eb7a29751b97">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#37f4b0c8-ba56-4cf1-9c7c-6b71eeba9c8a"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#eead0a35-9341-43de-8d03-744e201e9272">
<volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">185</volume>
<first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">191</first_page>
<issued xmlns="http://purl.org/dc/terms/">
<rdf:Description rdf:about="rdf:#7235b7a5-a277-4c1b-bf5c-df0c4ed47c26"/>
</issued>
<last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">203</last_page>
<Journal xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#4f2f6f57-42c0-46ea-ad9b-39306f08187c"/>
</Journal>
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#604cb528-19a8-4bd1-b194-3e377294580f"/>
</creator>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en"> Fighting a virus with a virus: a dynamic model for HIV-1 therapy </title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#adb69b32-3a4c-43b0-8db9-03ae1390fb5a">
<FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine Lloyd</FN>
</rdf:Description>
<rdf:Description rdf:about="#w">
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">recombinant virus</alternative>
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">w</title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#f8112994-59e4-4eac-9fdf-49a590c65b9e">
<subject xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#d6a77155-6ab4-4904-8560-c3993e325ee5"/>
</subject>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c406b81a-555a-44e9-aa45-43765969669c">
<creator xmlns="http://purl.org/dc/elements/1.1/">
<rdf:Description rdf:about="rdf:#adb69b32-3a4c-43b0-8db9-03ae1390fb5a"/>
</creator>
<rdf:value xml:lang="en"> This is the CellML description of Revilla and Garcia-Ramos's 2003 dynamic model for HIV-1 therapy. </rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#604cb528-19a8-4bd1-b194-3e377294580f">
<rdf:_2>
<rdf:Description rdf:about="rdf:#3db0f948-e8dc-4a1b-bfd5-3ff31fcdfe38"/>
</rdf:_2>
<rdf:_1>
<rdf:Description rdf:about="rdf:#2a9a0916-900a-463f-9382-eb7a29751b97"/>
</rdf:_1>
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">90</endingValue>
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">100000</pointDensity>
</rdf:Description>
<rdf:Description rdf:about="rdf:#0d3957e6-85f5-4c55-a157-b393fa44293d">
<JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#eead0a35-9341-43de-8d03-744e201e9272"/>
</JournalArticle>
<Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">12941536</Pubmed_id>
</rdf:Description>
<rdf:Description rdf:about="rdf:#99e069e7-6b38-4dd7-943d-cca6076087eb">
<rdf:type>
<rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/>
</rdf:type>
<rdf:value xml:lang="en">c.lloyd@auckland.ac.nz</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#6e80958a-b211-4789-9919-61f3987dffbf">
<W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2004-10-25</W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#efa592a2-8073-4c4b-ba2d-c03c6aae6e4e">
<rdf:_3 xml:lang="en">immunology</rdf:_3>
<rdf:_5 xml:lang="en">pharmacology</rdf:_5>
<rdf:_4 xml:lang="en">HIV-1</rdf:_4>
<rdf:_2 xml:lang="en">hiv-1</rdf:_2>
<rdf:_1 xml:lang="en">viral dynamics</rdf:_1>
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#3db0f948-e8dc-4a1b-bfd5-3ff31fcdfe38">
<N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
<rdf:Description rdf:about="rdf:#bb847ac6-4d6e-46fa-86cb-cd8f96ff4dc6"/>
</N>
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
</rdf:Description>
<rdf:Description rdf:about="#revilla_2003">
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#f8112994-59e4-4eac-9fdf-49a590c65b9e"/>
</reference>
<reference xmlns="http://www.cellml.org/bqs/1.0#">
<rdf:Description rdf:about="rdf:#0d3957e6-85f5-4c55-a157-b393fa44293d"/>
</reference>
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n3"/>
</simulation>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#c406b81a-555a-44e9-aa45-43765969669c"/>
</cmeta:comment>
</rdf:Description>
<rdf:Description rdf:about="rdf:#bb847ac6-4d6e-46fa-86cb-cd8f96ff4dc6">
<Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Gisela</Given>
<Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Garcia-Ramos</Family>
</rdf:Description>
</rdf:RDF>
</model>