<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 11/02/2010 at 2:44:42 at p.m. using:

COR (0.9.31.1333)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="mittler_1998" cmeta:id="mittler_1998" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Influence of Delayed Viral Production on Viral Dynamics in HIV-1 Infected Patients</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This CellML model runs in both OpenCell and COR however we are uncertain as to whether or not the CellML model replicates the original model from the published paper as there are no validation figures to compare it against. The CellML model is based on equatiosn 10a to 10e.  Parameter values for the variables k and p are not stated in the paper so in the CellML model these were taken from a previously published model by the same author (Perelson et al. 1996).  The units have been checked and they are consistent. Note that while the model does run in COR, since the unit of time is days the model is not ideally suited for running in COR.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
						<para> ABSTRACT: We present and analyze a model for the interaction of human immunodeficiency virus type 1 (HIV-1) with target cells that includes a time delay between initial infection and the formation of productively infected cells. Assuming that the variation among cells with respect to this 'intracellular' delay can be approximated by a gamma distribution, a high flexible distribution that can mimic a variety of biologically plausible delays, we provide analytical solutions for the expected decline in plasma virus concentration after the initiation of antiretroviral therapy with one or more protease inhibitors. We then use the model to investigate whether the parameters that characterize viral dynamics can be identified from biological data. Using non-linear least-squares regression to fit the model to simulated data in which the delays conform to a gamma distribution, we show that good estimates for free viral clearance rates, infected cell death rates, and parameters characterizing the gamma distribution can be obtained. For simulated data sets in which the delays were generated using other biologically plausible distributions, reasonably good estimates for viral clearance rates, infected cell death rates, and mean delay times can be obtained using the gamma-delay model. For simulated data sets that include added simulated noise, viral clearance rate estimates are not as reliable. If the mean intracellular delay is known, however, we show that reasonable estimates for the viral clearance rate can be obtained by taking the harmonic mean of viral clearance rate estimates from a group of patients. These results demonstrate that it is possible to incorporate distributed intracellular delays into existing models for HIV dynamics and to use these refined models to estimate the half-life of free virus from data on the decline in HIV-1 RNA following treatment. 
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Influence of Delayed Viral Production on Viral Dynamics in HIV-1 Infected Patients, John E. Mittler, Bernhard Sulzer, Avidan U. Neumann, and Alan S. Perelson, 1998, <emphasis>Mathematical Biosciences</emphasis>
, 152, 143-163.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/9780612">PubMed ID: 9780612</ulink>
				</para>
				
				<informalfigure float="0" id="fig_cell_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>cell diagram</title>
							</objectinfo>
							<imagedata fileref="mittler_1998a.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic summary of the dynamics of HIV-1 infection <emphasis>in vivo</emphasis> captured by the Perelson <emphasis>et al.</emphasis> 1996 model.</caption>
				</informalfigure>
				
				<informalfigure float="0" id="fig_cell_diagram2">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>cell diagram</title>
							</objectinfo>
							<imagedata fileref="mittler_1998b.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic summary of the dynamics of viral infection <emphasis>in vivo</emphasis> captured by the <ulink url="${HTML_EXMPL_HERZ_MODEL}">Herz <emphasis>et al.</emphasis> 1996 model</ulink>.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Description rdf:about="#T">
			<dc:title>T</dc:title>
			<dcterms:alternative>uninfected target CD4 cells</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#I">
			<dc:title>I</dc:title>
			<dcterms:alternative>productively infected cells</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#VI">
			<dc:title>VI</dc:title>
			<dcterms:alternative>infectious virus</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#VNI">
			<dc:title>VNI</dc:title>
			<dcterms:alternative>non-infectious virus</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Bag rdf:about="rdf:#d76571ba-dc56-4a1d-b281-573892ecb53b">
			<rdf:li>viral dynamics</rdf:li>
			<rdf:li>hiv-1</rdf:li>
			<rdf:li>immunology</rdf:li>
		</rdf:Bag>
		<rdf:Seq rdf:about="rdf:#49c01531-3246-4f7b-b6b5-ca2c647cf426">
			<rdf:li rdf:resource="rdf:#22717ba0-6e55-4d3d-9ec8-f2691c0979f5"/>
			<rdf:li rdf:resource="rdf:#b75b6956-253e-4b9b-acf4-4d18c6d788a1"/>
			<rdf:li rdf:resource="rdf:#e86c153d-3e60-4108-b65e-a8c25c3c719c"/>
			<rdf:li rdf:resource="rdf:#7bf7a391-0325-4732-b563-817e0b560d35"/>
		</rdf:Seq>
		<rdf:Description rdf:about="rdf:#3fbe6661-88b4-48bb-b1c4-5c304f6ee2c4">
			<dc:creator rdf:resource="rdf:#49c01531-3246-4f7b-b6b5-ca2c647cf426"/>
			<dc:title>
            Influence of delayed viral production on viral dynamics in HIV-1 
            infected patients
          </dc:title>
			<bqs:volume>152</bqs:volume>
			<bqs:first_page>143</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#56b1a1de-0354-46c6-83c4-4b7f244de0f7"/>
			<dcterms:issued rdf:resource="rdf:#630ab94a-2a09-46fe-a652-6c1e9e299048"/>
			<bqs:last_page>163</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#c2555cdd-2588-4d11-8c55-a5a1e8baef6f">
			<vCard:ORG rdf:resource="rdf:#5f791838-32b0-486d-88b8-969397e048ba"/>
			<vCard:EMAIL rdf:resource="rdf:#e1b96f0f-8fee-4a32-9ba4-d68e34605401"/>
			<vCard:N rdf:resource="rdf:#f606c0a5-deeb-42af-a836-110831af9b2f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e86c153d-3e60-4108-b65e-a8c25c3c719c">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#d7991f65-aa4f-407f-b826-2acfbc44844d"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#dfca7f86-7e72-4d12-a87c-7b5b66b4cf0d">
			<vCard:Given>Bernhard</vCard:Given>
			<vCard:Family>Sulzer</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e1b96f0f-8fee-4a32-9ba4-d68e34605401">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#630ab94a-2a09-46fe-a652-6c1e9e299048">
			<dcterms:W3CDTF>1998-09</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d7991f65-aa4f-407f-b826-2acfbc44844d">
			<vCard:Given>Avidan</vCard:Given>
			<vCard:Family>Neumann</vCard:Family>
			<vCard:Other>U</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f606c0a5-deeb-42af-a836-110831af9b2f">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#56b1a1de-0354-46c6-83c4-4b7f244de0f7">
			<dc:title>Mathematical Biosciences</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3040492a-5f05-4073-9ff7-e19ec2ba0867">
			<vCard:Given>Alan</vCard:Given>
			<vCard:Family>Perelson</vCard:Family>
			<vCard:Other>S</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b75b6956-253e-4b9b-acf4-4d18c6d788a1">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#dfca7f86-7e72-4d12-a87c-7b5b66b4cf0d"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3eb2faa2-1f22-45fa-8999-049cff31e318">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value rdf:resource="rdf:#d76571ba-dc56-4a1d-b281-573892ecb53b"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7bf7a391-0325-4732-b563-817e0b560d35">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#3040492a-5f05-4073-9ff7-e19ec2ba0867"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#38960b8b-aea9-4290-91a4-8499cf687047">
			<dc:creator rdf:resource="rdf:#343f32f4-6fcf-4572-92c9-5139700b6c75"/>
			<rdf:value>
          This is the CellML description of Mittler et al.'s 1998 mathematical 
          model of the influence of delayed viral production on viral dynamics 
          in HIV-1 infected patients.
        </rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7cf4e6da-36ad-4edd-b7e8-a8f78d1e16ef">
			<dcterms:W3CDTF>2003-12-05</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#22717ba0-6e55-4d3d-9ec8-f2691c0979f5">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#3d443823-53ff-4107-b6d8-480d9789587c"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#343f32f4-6fcf-4572-92c9-5139700b6c75">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#426fab4b-f874-4bb4-b2b6-640c8ed151c6">
			<dc:subject rdf:resource="rdf:#3eb2faa2-1f22-45fa-8999-049cff31e318"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#5f791838-32b0-486d-88b8-969397e048ba">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3d443823-53ff-4107-b6d8-480d9789587c">
			<vCard:Given>John</vCard:Given>
			<vCard:Family>Mittler</vCard:Family>
			<vCard:Other>E</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
			<dcterms:created rdf:resource="rdf:#7cf4e6da-36ad-4edd-b7e8-a8f78d1e16ef"/>
			<dc:creator rdf:resource="rdf:#c2555cdd-2588-4d11-8c55-a5a1e8baef6f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b8402502-86fb-4591-a791-712ba7ff1f52">
			<bqs:Pubmed_id>9780612</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#3fbe6661-88b4-48bb-b1c4-5c304f6ee2c4"/>
		</rdf:Description>
		<rdf:Description rdf:about="#mittler_1998">
			<dc:title>
        Mittler et al.'s 1998 mathematical model of the influence of delayed 
        viral production on viral dynamics in HIV-1 infected patients.
      </dc:title>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#38960b8b-aea9-4290-91a4-8499cf687047"/>
			<bqs:reference rdf:resource="rdf:#426fab4b-f874-4bb4-b2b6-640c8ed151c6"/>
			<bqs:reference rdf:resource="rdf:#b8402502-86fb-4591-a791-712ba7ff1f52"/>
		</rdf:Description>
	</rdf:RDF>   
	
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_ml">
      <unit units="litre" prefix="milli" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="day">
      <unit units="second" multiplier="86400"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="first_order_rate_constant">
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="ml_per_day">
      <unit units="litre" prefix="milli"/>
      <unit units="day" exponent="-1"/>
   </units>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="day" public_interface="out"/>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="T">
      <variable name="T" units="per_ml" public_interface="out"/>
      <variable name="k" units="ml_per_day" public_interface="in"/>
      <variable name="p" units="first_order_rate_constant" public_interface="in"/>
      <variable name="c" units="first_order_rate_constant" public_interface="in"/>
      <variable name="delta" units="first_order_rate_constant" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>T</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>c</ci>
                  <ci>delta</ci>
			   </apply>
               <apply>
                  <times/>
                  <ci>k</ci>
                  <ci>p</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="I">
      <variable name="I" units="per_ml" initial_value="0.1" public_interface="out"/>
	  <variable name="I_0" units="per_ml" />
      <variable name="delta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="k_" units="ml_per_day" public_interface="in"/>
      <variable name="T" units="per_ml" public_interface="in"/>
      <variable name="E4" units="per_ml" public_interface="in"/>
      <variable name="VI_0" units="per_ml" public_interface="in"/>
      <variable name="c" units="first_order_rate_constant" public_interface="in"/>
      <variable name="p" units="first_order_rate_constant" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>I</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k_</ci>
                  <ci>T</ci>
                  <ci>E4</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>delta</ci>
                  <ci>I</ci>
               </apply>
            </apply>
         </apply>
		 
		 <apply>
            <eq/>
            <ci>I_0</ci>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <ci>c</ci>
                  <ci>p</ci>
               </apply>
               <ci>VI_0</ci>
            </apply>
		 </apply>
      </math>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="VI">
      <variable name="VI" units="per_ml" initial_value="200000" public_interface="out"/>
      <variable name="VI_0" units="per_ml" initial_value="200000" public_interface="out"/>
      <variable name="h" units="dimensionless" public_interface="in"/>
      <variable name="I" units="per_ml" public_interface="in"/>
      <variable name="c" units="first_order_rate_constant" public_interface="in"/>
      <variable name="p" units="first_order_rate_constant" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>VI</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>h</ci>
                  </apply>
                  <ci>p</ci>
                  <ci>I</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>c</ci>
                  <ci>VI</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="VNI">
      <variable name="VNI" units="per_ml" initial_value="0" public_interface="out"/>
      <variable name="h" units="dimensionless" public_interface="in"/>
      <variable name="I" units="per_ml" public_interface="in"/>
      <variable name="c" units="first_order_rate_constant" public_interface="in"/>
      <variable name="p" units="first_order_rate_constant" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>VNI</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>h</ci>
                  <ci>p</ci>
                  <ci>I</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>c</ci>
                  <ci>VNI</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="virus_total">
      <variable name="V" units="per_ml"/>
      <variable name="VI" units="per_ml" public_interface="in"/>
      <variable name="VNI" units="per_ml" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V</ci>
            <apply>
               <plus/>
               <ci>VI</ci>
               <ci>VNI</ci>
            </apply>
         </apply>
      </math>
   </component>
  
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="E1">
      <variable name="E1" units="per_ml" initial_value="0" public_interface="out"/>
      <variable name="b_" units="day" public_interface="in"/>
      <variable name="VI" units="per_ml" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>E1</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>VI</ci>
                  <ci>E1</ci>
               </apply>
               <ci>b_</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="E2">
      <variable name="E2" units="per_ml" initial_value="0" public_interface="out"/>
      <variable name="b_" units="day" public_interface="in"/>
      <variable name="E1" units="per_ml" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>E2</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>E1</ci>
                  <ci>E2</ci>
               </apply>
               <ci>b_</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="E3">
      <variable name="E3" units="per_ml" initial_value="0" public_interface="out"/>
      <variable name="b_" units="day" public_interface="in"/>
      <variable name="E2" units="per_ml" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>E3</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>E2</ci>
                  <ci>E3</ci>
               </apply>
               <ci>b_</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="E4">
      <variable name="E4" units="per_ml" initial_value="0" public_interface="out"/>
      <variable name="b_" units="day" public_interface="in"/>
      <variable name="E3" units="per_ml" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>E4</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>E3</ci>
                  <ci>E4</ci>
               </apply>
               <ci>b_</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="Heavyside_function">
      <variable name="h" units="dimensionless" public_interface="out"/>
      <variable name="tau_p" units="day" initial_value="0"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>h</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="dimensionless">0</cn>
                  <apply>
                     <lt/>
                     <ci>time</ci>
                     <ci>tau_p</ci>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="dimensionless">1</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="kinetic_parameters">
      <variable name="c" units="first_order_rate_constant" initial_value="3" public_interface="out"/>
      <variable name="delta" units="first_order_rate_constant" initial_value="0.5" public_interface="out"/>
      <variable name="p" units="first_order_rate_constant" initial_value="774" public_interface="out"/>
      <variable name="b_" units="day" public_interface="out"/>
      <variable name="k_" units="ml_per_day" public_interface="out"/>
      <variable name="k" units="ml_per_day" initial_value="2.4e-5" public_interface="out"/>
      <variable name="b" units="day" initial_value="0.25"/>
      <variable name="m" units="first_order_rate_constant" initial_value="0.01"/>
      <variable name="n" units="dimensionless" initial_value="4"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>b_</ci>
            <apply>
               <divide/>
               <ci>b</ci>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <times/>
                     <ci>m</ci>
                     <ci>b</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>k_</ci>
            <apply>
               <divide/>
               <ci>k</ci>
               <apply>
                  <power/>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <ci>m</ci>
                        <ci>b</ci>
                     </apply>
                  </apply>
                  <ci>n</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E1" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E3" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E4" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="VI" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="VNI" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Heavyside_function" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I" component_2="T"/>
      <map_variables variable_1="T" variable_2="T"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I" component_2="E4"/>
      <map_variables variable_1="E4" variable_2="E4"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E1" component_2="VI"/>
      <map_variables variable_1="VI" variable_2="VI"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E2" component_2="E1"/>
      <map_variables variable_1="E1" variable_2="E1"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E3" component_2="E2"/>
      <map_variables variable_1="E2" variable_2="E2"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E4" component_2="E3"/>
      <map_variables variable_1="E3" variable_2="E3"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="VI" component_2="I"/>
      <map_variables variable_1="I" variable_2="I"/>
      <map_variables variable_1="VI_0" variable_2="VI_0"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="VNI" component_2="I"/>
      <map_variables variable_1="I" variable_2="I"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="VNI" component_2="virus_total"/>
      <map_variables variable_1="VNI" variable_2="VNI"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="VI" component_2="virus_total"/>
      <map_variables variable_1="VI" variable_2="VI"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Heavyside_function" component_2="VI"/>
      <map_variables variable_1="h" variable_2="h"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Heavyside_function" component_2="VNI"/>
      <map_variables variable_1="h" variable_2="h"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="T" component_2="kinetic_parameters"/>
      <map_variables variable_1="c" variable_2="c"/>
      <map_variables variable_1="p" variable_2="p"/>
      <map_variables variable_1="delta" variable_2="delta"/>
      <map_variables variable_1="k" variable_2="k"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I" component_2="kinetic_parameters"/>
      <map_variables variable_1="k_" variable_2="k_"/>
      <map_variables variable_1="delta" variable_2="delta"/>
      <map_variables variable_1="p" variable_2="p"/>
      <map_variables variable_1="c" variable_2="c"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E1" component_2="kinetic_parameters"/>
      <map_variables variable_1="b_" variable_2="b_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E2" component_2="kinetic_parameters"/>
      <map_variables variable_1="b_" variable_2="b_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E3" component_2="kinetic_parameters"/>
      <map_variables variable_1="b_" variable_2="b_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="E4" component_2="kinetic_parameters"/>
      <map_variables variable_1="b_" variable_2="b_"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="VI" component_2="kinetic_parameters"/>
      <map_variables variable_1="p" variable_2="p"/>
      <map_variables variable_1="c" variable_2="c"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="VNI" component_2="kinetic_parameters"/>
      <map_variables variable_1="p" variable_2="p"/>
      <map_variables variable_1="c" variable_2="c"/>
   </connection>
</model>
