// A Quantitative Model of Human Jejunal Smooth Muscle Cell Electrophysiology
// ***************************************************************************
// The CellML code of this model was prepared by
// YC Poh (email address: poh.yongcheng@gmail.com) using:
//
// (1) COR (0.9.31.1409)
//     Copyright 2002-2012 Dr Alan Garny
//     http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// &
//
// (2) CellML 1.0 was used to generate this model
//     http://www.cellml.org/
// ***************************************************************************
// Paper details:
// Authors: Poh YC, Corrias A, Cheng N and Buist ML
// PLoS ONE 7(8): e42385. doi:10.1371/journal.pone.0042385
//
// Feedback & comments are welcomed
//
// The C & Matlab versions of this model are available for download from
// the Computational Bioengineering Laboratory (NUS) website:
// http://www.bioeng.nus.edu.sg/compbiolab/
// reference: subject_type keyword; cell model; ion channel; small intestine; slow wave; gastrointestinal tract; electrophysiology
// reference: Pubmed_id 22912702; Family Poh; Given Yong Cheng; Family Corrias; Given Alberto; Family Cheng; Given Nicholas; Family Buist; Given Martin; Other Lindsay; title A Quantitative Model of Human Jejunal Smooth Muscle Cell Electrophysiology; W3CDTF 2012-09-15; title PLoS ONE; volume 7(8); first_page e42385
def model Poh_et_al_hJSMC_model as
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit mole {pref: milli, expo: 4};
    unit litre {expo: -4};
  enddef;
  def unit per_millimolar as
    unit mole {pref: milli, expo: -1};
    unit litre;
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit mm2 as
    unit metre {pref: milli, expo: 2};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millivolt2 as
    unit volt {pref: milli, expo: 2};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit per_millisecond as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit per_kelvin as
    unit kelvin {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -73.5049651455872, pub: out};
    var R: joule_per_mole_kelvin {init: 8.314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_millimole {init: 96.48534, pub: out};
    var Cm: picoF {init: 50};
    var I_stim: picoA {pub: in};
    var time: millisecond {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_Ca_T: picoA {pub: in};
    var i_Kv: picoA {pub: in};
    var i_BK: picoA {pub: in};
    var i_NCX: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NsK: picoA {pub: in};
    var i_NsNa: picoA {pub: in};
    ode(V, time) = -1{dimensionless}/Cm*(i_Na+i_Ca_L+i_Ca_T+i_Kv+i_BK+i_NCX+i_NaK+i_NsK+i_NsNa+I_stim);
  enddef;

  def comp I_stim as
    var time: millisecond {pub: in};
    var local_time: millisecond;
    var period: millisecond {init: 10000};
    var stim_start: millisecond;
    var V: millivolt {pub: in};
    var Gcouple: nanoS {init: 2.6};
    var t_ICCpeak: millisecond {init: 300};
    var t_ICCplateau: millisecond {init: 9700};
    var t_slope: millisecond {init: 600};
    var f_1: millisecond {init: 12000};
    var f_2: millisecond {init: 300};
    var V_ICCrest: millivolt {init: -57};
    var V_ICCamp: millivolt {init: 33.5};
    var I_stim: picoA {pub: out};
    stim_start = sel
      case (time >= period*0{dimensionless}) and (time <= period*1{dimensionless}):
        period*0{dimensionless};
      case (time >= period*1{dimensionless}) and (time <= period*2{dimensionless}):
        period*1{dimensionless};
      case (time >= period*2{dimensionless}) and (time < period*3{dimensionless}):
        period*2{dimensionless};
      case (time >= period*3{dimensionless}) and (time < period*4{dimensionless}):
        period*3{dimensionless};
      otherwise:
        0{millisecond};
    endsel;
    local_time = time-stim_start;
    I_stim = sel
      case local_time < t_ICCpeak:
        Gcouple*(V-(V_ICCrest+V_ICCamp*local_time/f_2));
      otherwise:
        Gcouple*(V-(V_ICCrest+V_ICCamp*(1{dimensionless}+exp(-f_1/(2{dimensionless}*t_slope)))*1{dimensionless}/(1{dimensionless}+exp((local_time-f_2-0.5{dimensionless}*f_1)/t_slope))));
    endsel;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: picoA {pub: out};
    var E_Ca: millivolt {pub: out};
    var g_CaL: nanoS {init: 1.44};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_millimole {pub: in};
    var Cao: millimolar {pub: in};
    var Cai: millimolar {pub: in, priv: out};
    var O_CaL: dimensionless {priv: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_L = g_CaL*O_CaL*(V-E_Ca);
  enddef;

  def comp L_type_Ca_channel_states as
    var O_CaL: dimensionless {init: 3.88576045134351e-6, pub: out};
    var C0: dimensionless {init: 0.815464741971086};
    var C1: dimensionless {init: 0.152399266235657};
    var C2: dimensionless {init: 0.0106805060777161};
    var C3: dimensionless {init: 0.000332673548872087};
    var C0Ca: dimensionless {init: 0.0175888495282545};
    var C1Ca: dimensionless {init: 0.00328711668724504};
    var C2Ca: dimensionless {init: 0.000230369020877669};
    var C3Ca: dimensionless {init: 7.1754726923539e-6};
    var ICa: dimensionless {init: 8.38123983500905e-8};
    var IVs: dimensionless {init: 1.1193313274705e-6};
    var IVf: dimensionless {init: 4.0998751301597e-6};
    var IVfCa: dimensionless {init: 8.84306615061238e-8};
    var IVsCa: dimensionless {init: 2.41429816075123e-8};
    var alpha: per_millisecond;
    var beta: per_millisecond;
    var alpha_0: per_millisecond;
    var alpha_1: per_millisecond;
    var alpha_2: per_millisecond;
    var alpha_3: per_millisecond;
    var beta_0: per_millisecond;
    var beta_1: per_millisecond;
    var beta_2: per_millisecond;
    var beta_3: per_millisecond;
    var delta: per_millisecond;
    var theta: per_millisecond;
    var phi_s: per_millisecond;
    var phi_f: per_millisecond;
    var omega_s: per_millisecond;
    var omega_f: per_millisecond;
    var omega_fs: per_millisecond;
    var omega_sf: per_millisecond;
    var psi_s: per_millisecond;
    var psi_f: per_millisecond;
    var xi_s: per_millisecond;
    var xi_f: per_millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var T_correction_Ca: dimensionless;
    var Q10Ca: dimensionless {init: 2.1};
    var T: kelvin {pub: in};
    var norm: dimensionless;
    T_correction_Ca = pow(Q10Ca, (T-310{kelvin})/10{kelvin});
    alpha = T_correction_Ca*0.731{per_millisecond}*exp(V/30{millivolt});
    beta = T_correction_Ca*0.2149{per_millisecond}*exp(-V/40{millivolt});
    alpha_0 = 4{dimensionless}*alpha;
    alpha_1 = 3{dimensionless}*alpha;
    alpha_2 = 2{dimensionless}*alpha;
    alpha_3 = 1{dimensionless}*alpha;
    beta_0 = 1{dimensionless}*beta;
    beta_1 = 2{dimensionless}*beta;
    beta_2 = 3{dimensionless}*beta;
    beta_3 = 4{dimensionless}*beta;
    phi_f = T_correction_Ca*0.4742{per_millisecond}*exp(V/10{millivolt});
    phi_s = T_correction_Ca*0.05956{per_millisecond}*exp(-V/40{millivolt});
    xi_f = T_correction_Ca*0.01407{per_millisecond}*exp(-V/300{millivolt});
    xi_s = T_correction_Ca*0.01213{per_millisecond}*exp(V/500{millivolt});
    psi_f = T_correction_Ca*0.02197{per_millisecond}*exp(V/500{millivolt});
    psi_s = T_correction_Ca*0.00232{per_millisecond}*exp(-V/280{millivolt});
    omega_f = beta_3*xi_f*phi_f/(alpha_3*psi_f);
    omega_s = beta_3*xi_s*phi_s/(alpha_3*psi_s);
    omega_sf = xi_s*psi_f/xi_f;
    omega_fs = psi_s;
    delta = T_correction_Ca*0.01{per_millisecond};
    theta = T_correction_Ca*4{per_millisecond}/(1{dimensionless}+1{millimolar}/Cai);
    norm = C3+C2+C1+C0+C3Ca+C2Ca+C1Ca+C0Ca+O_CaL+ICa+IVs+IVf+IVsCa+IVfCa;
    ode(C3, time) = alpha_2*C2/norm-(alpha_3+beta_2+phi_s+phi_f+theta)*C3/norm+beta_3*O_CaL/norm+omega_f*IVf/norm+omega_s*IVs/norm+delta*C3Ca/norm;
    ode(C2, time) = alpha_1*C1/norm-(alpha_2+beta_1+theta)*C2/norm+beta_2*C3/norm+delta*C2Ca/norm;
    ode(C1, time) = alpha_0*C0/norm-(alpha_1+beta_0+theta)*C1/norm+beta_1*C2/norm+delta*C1Ca/norm;
    ode(C0, time) = -(alpha_0+theta)*C0/norm+beta_0*C1/norm+delta*C0Ca/norm;
    ode(C3Ca, time) = theta*C3/norm+alpha_2*C2Ca/norm-(alpha_3+beta_2+phi_f+phi_s+delta)*C3Ca/norm+beta_3*ICa/norm+omega_f*IVfCa/norm+omega_s*IVsCa/norm;
    ode(C2Ca, time) = theta*C2/norm+alpha_1*C1Ca/norm-(alpha_2+beta_1+delta)*C2Ca/norm+beta_2*C3Ca/norm;
    ode(C1Ca, time) = theta*C1/norm+alpha_0*C0Ca/norm-(alpha_1+beta_0+delta)*C1Ca/norm+beta_1*C2Ca/norm;
    ode(C0Ca, time) = theta*C0/norm-(alpha_0+delta)*C0Ca/norm+beta_0*C1Ca/norm;
    ode(O_CaL, time) = alpha_3*C3/norm-(beta_3+psi_f+psi_s+theta)*O_CaL/norm+xi_f*IVf/norm+xi_s*IVs/norm+delta*ICa/norm;
    ode(ICa, time) = theta*O_CaL/norm+alpha_3*C3Ca/norm-(beta_3+psi_f+psi_s+delta)*ICa/norm+xi_f*IVfCa/norm+xi_s*IVsCa/norm;
    ode(IVs, time) = phi_s*C3/norm+psi_s*O_CaL/norm+omega_fs*IVf/norm-(omega_s+xi_s+omega_sf+theta)*IVs/norm+delta*IVsCa/norm;
    ode(IVf, time) = phi_f*C3/norm+psi_f*O_CaL/norm-(omega_f+xi_f+omega_fs+theta)*IVf/norm+omega_sf*IVs/norm+delta*IVfCa/norm;
    ode(IVsCa, time) = theta*IVs/norm+phi_s*C3Ca/norm+psi_s*ICa/norm+omega_fs*IVfCa/norm-(omega_s+xi_s+omega_sf+delta)*IVsCa/norm;
    ode(IVfCa, time) = theta*IVf/norm+phi_f*C3Ca/norm+psi_f*ICa/norm-(omega_f+xi_f+omega_fs+delta)*IVfCa/norm+omega_sf*IVsCa/norm;
  enddef;

  def comp T_type_Ca_channel as
    var i_Ca_T: picoA {pub: out};
    var g_CaT: nanoS {init: 0.0425};
    var E_Ca: millivolt {pub: out};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d_CaT: dimensionless {priv: in};
    var f_CaT: dimensionless {priv: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_millimole {pub: in};
    var Cao: millimolar {pub: in};
    var Cai: millimolar {pub: in, priv: out};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_T = g_CaT*d_CaT*f_CaT*(V-E_Ca);
  enddef;

  def comp T_type_Ca_channel_d_gate as
    var d_CaT: dimensionless {init: 0.0791635737410974, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var d_CaT_inf: dimensionless;
    var tau_d_CaT: millisecond;
    var T_correction_Ca: dimensionless;
    var Q10Ca: dimensionless {init: 2.1};
    var T: kelvin {pub: in};
    T_correction_Ca = pow(Q10Ca, (T-297{kelvin})/10{kelvin});
    d_CaT_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+60.5{millivolt})/5.3{millivolt}));
    tau_d_CaT = 1.9058{millisecond}/T_correction_Ca;
    ode(d_CaT, time) = (d_CaT_inf-d_CaT)/tau_d_CaT;
  enddef;

  def comp T_type_Ca_channel_f_gate as
    var f_CaT: dimensionless {init: 0.377831534375835, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f_CaT_inf: dimensionless;
    var tau_f_CaT: millisecond;
    var T_correction_Ca: dimensionless;
    var Q10Ca: dimensionless {init: 2.1};
    var T: kelvin {pub: in};
    T_correction_Ca = pow(Q10Ca, (T-297{kelvin})/10{kelvin});
    f_CaT_inf = 1{dimensionless}/(1{dimensionless}+exp((V+75.5{millivolt})/4{millivolt}));
    tau_f_CaT = 0.38117{millisecond}*(8.6{dimensionless}+14.7{dimensionless}*exp(-(V+50{millivolt})*(V+50{millivolt})/900{millivolt2}))/T_correction_Ca;
    ode(f_CaT, time) = (f_CaT_inf-f_CaT)/tau_f_CaT;
  enddef;

  def comp voltage_dep_K_channel as
    var i_Kv: picoA {pub: out};
    var g_Kv: nanoS {init: 1.0217};
    var E_K: millivolt {pub: out};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var x_Kv: dimensionless {priv: in};
    var y_Kv: dimensionless {priv: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_millimole {pub: in};
    i_Kv = g_Kv*x_Kv*y_Kv*(V-E_K);
    E_K = R*T/F*ln(Ko/Ki);
  enddef;

  def comp voltage_dep_K_channel_x_gate as
    var x_Kv: dimensionless {init: 0.14714161078933, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var x_Kv_inf: dimensionless;
    var tau_x_Kv: millisecond;
    var T: kelvin {pub: in};
    var T_correction_K: dimensionless;
    var Q10K: dimensionless {init: 3.1};
    T_correction_K = pow(Q10K, (T-297{kelvin})/10{kelvin});
    x_Kv_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+43{millivolt})/17.36{millivolt}));
    tau_x_Kv = 4.7803{millisecond}/T_correction_K;
    ode(x_Kv, time) = (x_Kv_inf-x_Kv)/tau_x_Kv;
  enddef;

  def comp voltage_dep_K_channel_y_gate as
    var y_Kv: dimensionless {init: 0.99994773314105, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var y_Kv_inf: dimensionless;
    var tau_y_Kv: millisecond;
    var T: kelvin {pub: in};
    var T_correction_K: dimensionless;
    var Q10K: dimensionless {init: 3.1};
    T_correction_K = pow(Q10K, (T-297{kelvin})/10{kelvin});
    y_Kv_inf = 1{dimensionless}/(1{dimensionless}+exp((V-44.9{millivolt})/12.0096{millivolt}));
    tau_y_Kv = 763.7564{millisecond}/T_correction_K;
    ode(y_Kv, time) = (y_Kv_inf-y_Kv)/tau_y_Kv;
  enddef;

  def comp Calcium_voltage_activated_potassium_channel as
    var i_BK: picoA {pub: out};
    var E_K: millivolt {pub: out};
    var g_BK: nanoS {init: 80};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_millimole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var O4: dimensionless {priv: in};
    var Cai: millimolar {pub: in, priv: out};
    E_K = R*T/F*ln(Ko/Ki);
    i_BK = g_BK*O4*(V-E_K);
  enddef;

  def comp Calcium_voltage_activated_potassium_channel_states as
    var C0: dimensionless {init: 0.48379087935899};
    var C1: dimensionless {init: 0.385183559520031};
    var C2: dimensionless {init: 0.115002824567753};
    var C3: dimensionless {init: 0.0152602714149774};
    var C4: dimensionless {init: 0.000759264410974374};
    var O0: dimensionless {init: 6.94960798375172e-7};
    var O1: dimensionless {init: 5.55636826398253e-8};
    var O2: dimensionless {init: 2.85143702125325e-8};
    var O3: dimensionless {init: 1.59832806123435e-6};
    var O4: dimensionless {init: 1.82113764497095e-6, pub: out};
    var alpha: per_millisecond;
    var beta: per_millisecond;
    var k_on: per_millisecond;
    var k_off_C: per_millisecond;
    var k_off_O: per_millisecond;
    var k_C0O0: per_millisecond;
    var k_C1O1: per_millisecond;
    var k_C2O2: per_millisecond;
    var k_C3O3: per_millisecond;
    var k_C4O4: per_millisecond;
    var k_O0C0: per_millisecond;
    var k_O1C1: per_millisecond;
    var k_O2C2: per_millisecond;
    var k_O3C3: per_millisecond;
    var k_O4C4: per_millisecond;
    var k_C0C1: per_millisecond;
    var k_C1C2: per_millisecond;
    var k_C2C3: per_millisecond;
    var k_C3C4: per_millisecond;
    var k_C4C3: per_millisecond;
    var k_C3C2: per_millisecond;
    var k_C2C1: per_millisecond;
    var k_C1C0: per_millisecond;
    var k_O0O1: per_millisecond;
    var k_O1O2: per_millisecond;
    var k_O2O3: per_millisecond;
    var k_O3O4: per_millisecond;
    var k_O4O3: per_millisecond;
    var k_O3O2: per_millisecond;
    var k_O2O1: per_millisecond;
    var k_O1O0: per_millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var T: kelvin {pub: in};
    var norm: dimensionless;
    alpha = 1{per_millisecond}*exp(8.47188{per_millivolt}*V/(1{per_kelvin}*T));
    beta = 1{per_millisecond}*exp(-7.77556{per_millivolt}*V/(1{per_kelvin}*T));
    k_on = 40633{per_millisecond};
    k_off_C = 11{per_millisecond};
    k_off_O = 1.1{per_millisecond};
    k_C0O0 = 0.02162{dimensionless}*alpha;
    k_C1O1 = 0.000869{dimensionless}*alpha;
    k_C2O2 = 0.0000281{dimensionless}*alpha;
    k_C3O3 = 0.000781{dimensionless}*alpha;
    k_C4O4 = 0.044324{dimensionless}*alpha;
    k_O0C0 = 318.1084{dimensionless}*beta;
    k_O1C1 = 144.1736{dimensionless}*beta;
    k_O2C2 = 32.6594{dimensionless}*beta;
    k_O3C3 = 0.095312{dimensionless}*beta;
    k_O4C4 = 0.000106{dimensionless}*beta;
    k_C0C1 = 4{per_millimolar}*k_on*Cai;
    k_C1C2 = 3{per_millimolar}*k_on*Cai;
    k_C2C3 = 2{per_millimolar}*k_on*Cai;
    k_C3C4 = 1{per_millimolar}*k_on*Cai;
    k_C4C3 = 4{dimensionless}*k_off_C;
    k_C3C2 = 3{dimensionless}*k_off_C;
    k_C2C1 = 2{dimensionless}*k_off_C;
    k_C1C0 = 1{dimensionless}*k_off_C;
    k_O0O1 = 4{per_millimolar}*k_on*Cai;
    k_O1O2 = 3{per_millimolar}*k_on*Cai;
    k_O2O3 = 2{per_millimolar}*k_on*Cai;
    k_O3O4 = 1{per_millimolar}*k_on*Cai;
    k_O4O3 = 4{dimensionless}*k_off_O;
    k_O3O2 = 3{dimensionless}*k_off_O;
    k_O2O1 = 2{dimensionless}*k_off_O;
    k_O1O0 = 1{dimensionless}*k_off_O;
    norm = C0+C1+C2+C3+C4+O0+O1+O2+O3+O4;
    ode(C4, time) = -(k_C4C3+k_C4O4)*C4/norm+k_C3C4*C3/norm+k_O4C4*O4/norm;
    ode(C3, time) = -(k_C3C2+k_C3O3+k_C3C4)*C3/norm+k_C2C3*C2/norm+k_O3C3*O3/norm+k_C4C3*C4/norm;
    ode(C2, time) = -(k_C2C1+k_C2O2+k_C2C3)*C2/norm+k_C1C2*C1/norm+k_O2C2*O2/norm+k_C3C2*C3/norm;
    ode(C1, time) = -(k_C1C0+k_C1O1+k_C1C2)*C1/norm+k_C0C1*C0/norm+k_O1C1*O1/norm+k_C2C1*C2/norm;
    ode(C0, time) = -(k_C0C1+k_C0O0)*C0/norm+k_C1C0*C1/norm+k_O0C0*O0/norm;
    ode(O4, time) = -(k_O4O3+k_O4C4)*O4/norm+k_O3O4*O3/norm+k_C4O4*C4/norm;
    ode(O3, time) = -(k_O3O2+k_O3C3+k_O3O4)*O3/norm+k_O2O3*O2/norm+k_C3O3*C3/norm+k_O4O3*O4/norm;
    ode(O2, time) = -(k_O2O1+k_O2C2+k_O2O3)*O2/norm+k_O1O2*O1/norm+k_C2O2*C2/norm+k_O3O2*O3/norm;
    ode(O1, time) = -(k_O1O0+k_O1C1+k_O1O2)*O1/norm+k_O0O1*O0/norm+k_C1O1*C1/norm+k_O2O1*O2/norm;
    ode(O0, time) = -(k_O0O1+k_O0C0)*O0/norm+k_O1O0*O1/norm+k_C0O0*C0/norm;
  enddef;

  def comp sodium_current as
    var i_Na: picoA {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: nanoS {init: 25.1};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_millimole {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var O_Na: dimensionless {priv: in};
    i_Na = g_Na*O_Na*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp Na_channel_states as
    var O_Na: dimensionless {init: 1.96760342050475e-6, pub: out};
    var C1: dimensionless {init: 0.0119443135223679};
    var C2: dimensionless {init: 0.0109545368437155};
    var C3: dimensionless {init: 0.973782548650071};
    var I1: dimensionless {init: 0.000126882921013389};
    var I2: dimensionless {init: 0.00318975045717667};
    var k_I2I1: per_millisecond;
    var k_I1O: per_millisecond;
    var k_OC1: per_millisecond;
    var k_C1C2: per_millisecond;
    var k_C2C3: per_millisecond;
    var k_C3C2: per_millisecond;
    var k_C2C1: per_millisecond;
    var k_C1O: per_millisecond;
    var k_OI1: per_millisecond;
    var k_I1I2: per_millisecond;
    var k_I1C1: per_millisecond;
    var k_C1I1: per_millisecond;
    var norm: dimensionless;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var T_correction_Na: dimensionless;
    var Q10Na: dimensionless {init: 2.45};
    var T: kelvin {pub: in};
    T_correction_Na = 1{dimensionless}*pow(Q10Na, (T-297{kelvin})/10{kelvin});
    k_I2I1 = T_correction_Na*0.0039239{per_millisecond}*exp(2.6793{dimensionless}+0.0061468{per_millivolt}*V);
    k_I1O = T_correction_Na*0.12052{per_millisecond}*exp(-9.6028{dimensionless}+0.083025{per_millivolt}*V);
    k_OC1 = T_correction_Na*2.391{per_millisecond}*exp(-13.335{dimensionless}-0.25289{per_millivolt}*V);
    k_C1C2 = T_correction_Na*3.1566{per_millisecond}*exp(0.36352{dimensionless}+0.077193{per_millivolt}*V);
    k_C2C3 = T_correction_Na*0.55432{per_millisecond}*exp(-0.099074{dimensionless}+0.036441{per_millivolt}*V);
    k_C3C2 = T_correction_Na*0.00052548{per_millisecond}*exp(-0.069102{dimensionless}+0.0031945{per_millivolt}*V);
    k_C2C1 = T_correction_Na*1.4496{per_millisecond}*exp(-0.1566{dimensionless}+0.058353{per_millivolt}*V);
    k_C1O = T_correction_Na*1.5329{per_millisecond}*exp(0.0093193{dimensionless}+0.041075{per_millivolt}*V);
    k_OI1 = T_correction_Na*1.6164{per_millisecond}*exp(0.30763{dimensionless}+0.0060535{per_millivolt}*V);
    k_I1I2 = T_correction_Na*0.027735{per_millisecond}*exp(0.05149{dimensionless}-0.046865{per_millivolt}*V);
    k_I1C1 = T_correction_Na*1.9046{per_millisecond}*exp(-2.484{dimensionless}+0.020406{per_millivolt}*V);
    k_C1I1 = T_correction_Na*0.00021688{per_millisecond}*exp(-0.063438{dimensionless}+0.0046683{per_millivolt}*V);
    norm = O_Na+C1+C2+C3+I1+I2;
    ode(C3, time) = -k_C3C2*C3/norm+k_C2C3*C2/norm;
    ode(C2, time) = -(k_C2C1+k_C2C3)*C2/norm+k_C1C2*C1/norm+k_C3C2*C3/norm;
    ode(C1, time) = -(k_C1C2+k_C1O+k_C1I1)*C1/norm+k_OC1*O_Na/norm+k_C2C1*C2/norm+k_I1C1*I1/norm;
    ode(O_Na, time) = -(k_OC1+k_OI1)*O_Na/norm+k_C1O*C1/norm+k_I1O*I1/norm;
    ode(I2, time) = -k_I2I1*I2/norm+k_I1I2*I1/norm;
    ode(I1, time) = -(k_I1O+k_I1I2+k_I1C1)*I1/norm+k_I2I1*I2/norm+k_C1I1*C1/norm+k_OI1*O_Na/norm;
  enddef;

  def comp Na_Ca_exchanger as
    var i_NCX: picoA {pub: out};
    var P_NCX: picoA {init: 1992.335};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var K_mCa: millimolar {init: 1.38};
    var K_mNai: millimolar {init: 87.5};
    var k_sat: dimensionless {init: 0.1};
    var gamma: dimensionless {init: 0.35};
    i_NCX = P_NCX*(exp(gamma*V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-2.5{dimensionless}*exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Nao, 3{dimensionless})*Cai)/((pow(K_mNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(K_mCa+Cao)*(1{dimensionless}+k_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var P_NaK: picoA {init: 9.26};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    i_NaK = P_NaK*Ko*Nai/((Ko+K_mK)*(K_mNa+Nai)*(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T))));
  enddef;

  def comp non_specific_Na_current as
    var V: millivolt {pub: in, priv: out};
    var i_NsNa: picoA {pub: out};
    var g_NsNa: nanoS {init: 0.022488};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var E_Na: millivolt {pub: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    E_Na = R*T/F*ln(Nao/Nai);
    i_NsNa = g_NsNa*(V-E_Na);
  enddef;

  def comp non_specific_K_current as
    var V: millivolt {pub: in, priv: out};
    var i_NsK: picoA {pub: out};
    var g_NsK: nanoS {init: 0.017512};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var E_K: millivolt {pub: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    E_K = R*T/F*ln(Ko/Ki);
    i_NsK = g_NsK*(V-E_K);
  enddef;

  def comp ionic_concentrations as
    var Nai: millimolar {init: 10.5731241425458, pub: out};
    var Nao: millimolar {init: 140, pub: out};
    var Ki: millimolar {init: 153.604280337996, pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
    var Cai: millimolar {init: 5.38843941249284e-5, pub: out};
    var Cao: millimolar {init: 2, pub: out};
    var CRT_total: millimolar {init: 0.034};
    var CaM_total: millimolar {init: 0.012};
    var K_D_CRT: millimolar {init: 0.0009};
    var K_D_CaM: millimolar4 {init: 0.0001};
    var n_CRT: dimensionless {init: 1};
    var n_CaM: dimensionless {init: 4};
    var V_myo: litre {pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_Na: picoA {pub: in};
    var i_Kv: picoA {pub: in};
    var i_BK: picoA {pub: in};
    var i_NCX: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NsK: picoA {pub: in};
    var i_NsNa: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_Ca_T: picoA {pub: in};
    var I_stim: picoA {pub: in};
    V_myo = 3.5e-12{litre};
    ode(Nai, time) = -1{second}/1e15{millisecond}*(i_Na+i_NsNa+i_NCX*3{dimensionless}+i_NaK*3{dimensionless})/(V_myo*F);
    ode(Ki, time) = -1e-15{dimensionless}*(i_Kv+i_BK+i_NsK+I_stim-i_NaK*2{dimensionless})/(V_myo*F);
    ode(Cai, time) = -1e-15{dimensionless}*(i_Ca_L+i_Ca_T-i_NCX*2{dimensionless})/(2{dimensionless}*V_myo*F)/(1{dimensionless}+n_CRT*CRT_total*K_D_CRT*pow(Cai, n_CRT-1{dimensionless})/sqr(pow(Cai, n_CRT)+K_D_CRT)+n_CaM*CaM_total*K_D_CaM*pow(Cai, n_CaM-1{dimensionless})/sqr(pow(Cai, n_CaM)+K_D_CaM));
  enddef;

  def group as containment for
    comp membrane incl
      comp I_stim;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_states;
      endcomp;
      comp T_type_Ca_channel incl
        comp T_type_Ca_channel_d_gate;
        comp T_type_Ca_channel_f_gate;
      endcomp;
      comp voltage_dep_K_channel incl
        comp voltage_dep_K_channel_x_gate;
        comp voltage_dep_K_channel_y_gate;
      endcomp;
      comp Calcium_voltage_activated_potassium_channel incl
        comp Calcium_voltage_activated_potassium_channel_states;
      endcomp;
      comp sodium_current incl
        comp Na_channel_states;
      endcomp;
      comp Na_Ca_exchanger;
      comp sodium_potassium_pump;
      comp non_specific_Na_current;
      comp non_specific_K_current;
      comp ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_states;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_d_gate;
      comp T_type_Ca_channel_f_gate;
    endcomp;
    comp voltage_dep_K_channel incl
      comp voltage_dep_K_channel_x_gate;
      comp voltage_dep_K_channel_y_gate;
    endcomp;
    comp Calcium_voltage_activated_potassium_channel incl
      comp Calcium_voltage_activated_potassium_channel_states;
    endcomp;
    comp sodium_current incl
      comp Na_channel_states;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between I_stim and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between voltage_dep_K_channel and environment for
    vars time and time;
  enddef;
  def map between Calcium_voltage_activated_potassium_channel and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and I_stim for
    vars V and V;
    vars I_stim and I_stim;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and voltage_dep_K_channel for
    vars V and V;
    vars i_Kv and i_Kv;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Calcium_voltage_activated_potassium_channel for
    vars V and V;
    vars i_BK and i_BK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NCX and i_NCX;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_Na_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_NsNa and i_NsNa;
  enddef;
  def map between membrane and non_specific_K_current for
    vars V and V;
    vars i_NsK and i_NsK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between I_stim and ionic_concentrations for
    vars I_stim and I_stim;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Cao and Cao;
    vars Cai and Cai;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between T_type_Ca_channel and ionic_concentrations for
    vars Cao and Cao;
    vars Cai and Cai;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between voltage_dep_K_channel and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_Kv and i_Kv;
  enddef;
  def map between Calcium_voltage_activated_potassium_channel and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Cai and Cai;
    vars i_BK and i_BK;
  enddef;
  def map between sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_NCX and i_NCX;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_Na_current and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_NsNa and i_NsNa;
  enddef;
  def map between non_specific_K_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_NsK and i_NsK;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_states for
    vars O_CaL and O_CaL;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
    vars T and T;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_d_gate for
    vars d_CaT and d_CaT;
    vars time and time;
    vars V and V;
    vars T and T;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_f_gate for
    vars f_CaT and f_CaT;
    vars time and time;
    vars V and V;
    vars T and T;
  enddef;
  def map between voltage_dep_K_channel and voltage_dep_K_channel_x_gate for
    vars x_Kv and x_Kv;
    vars time and time;
    vars V and V;
    vars T and T;
  enddef;
  def map between voltage_dep_K_channel and voltage_dep_K_channel_y_gate for
    vars y_Kv and y_Kv;
    vars time and time;
    vars V and V;
    vars T and T;
  enddef;
  def map between Calcium_voltage_activated_potassium_channel and Calcium_voltage_activated_potassium_channel_states for
    vars O4 and O4;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
    vars T and T;
  enddef;
  def map between sodium_current and Na_channel_states for
    vars O_Na and O_Na;
    vars time and time;
    vars V and V;
    vars T and T;
  enddef;
enddef;
