def model MetabolicComponentLibrary as
  def unit mM as
    unit mole {pref: milli};
    unit liter {expo: -1};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit mM_per_second as
    unit mM;
    unit second {expo: -1};
  enddef;

  def comp AllostericInhibitionEmpirical as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var I: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var n: dimensionless {pub: in};
    var Ki: mM {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)/(1{dimensionless}+S/Km_S+P/Km_P+pow(I/Ki, n));
  enddef;

  def comp AllostericInhibitionMWC as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var I: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var n: dimensionless {pub: in};
    var L: dimensionless {pub: in};
    var Ki: mM {pub: in};
    J = V*S*pow(Km_S+S, n-1{dimensionless})/(L*pow(Km_S*(1{dimensionless}+I/Ki), n)+pow(Km_S+S, n));
  enddef;

  def comp BiIrrev as
    var J: mM_per_second {pub: out};
    var S1: mM {pub: in};
    var S2: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Km_S1: mM {pub: in};
    var Km_S2: mM {pub: in};
    J = V*S1*S2/(Km_S1*Km_S2+S1*Km_S2+S2*Km_S1+S1*S2);
  enddef;

  def comp CatalyticActivationIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var A: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var Km_A: mM {pub: in};
    J = V*S*A/((Km_S+S)*(Km_A+A));
  enddef;

  def comp CatalyticActivationRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var A: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var Km_A: mM {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)*A/((1{dimensionless}+S/Km_S+P/Km_P)*(Km_A+A));
  enddef;

  def comp CompetitiveInhibitionIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var I: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var Ki: mM {pub: in};
    J = V*S/(S+Km_S*(1{dimensionless}+I/Ki));
  enddef;

  def comp CompetitiveInhibitionRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var I: mM {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var Ki: mM {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)/(1{dimensionless}+S/Km_S+P/Km_P+I/Ki);
  enddef;

  def comp ConstantFluxIrrev as
    var J: mM_per_second {pub: out};
    var V: mM_per_second {pub: in};
    J = V;
  enddef;

  def comp Hill1ModifierRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var M: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Keq: dimensionless {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var Km_M: mM {pub: in};
    var a: dimensionless {pub: in};
    var h: dimensionless {pub: in};
    J = V*S/Km_S*(1{dimensionless}-P/(S*Keq))*pow(S/Km_S+P/Km_P, h-1{dimensionless})/((1{dimensionless}+pow(M/Km_M, h))/(1{dimensionless}+a*pow(M/Km_M, h))+pow(S/Km_S+P/Km_P, h));
  enddef;

  def comp Hill2ModifierRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var M1: mM {pub: in};
    var M2: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Keq: dimensionless {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var Km_M1: mM {pub: in};
    var Km_M2: mM {pub: in};
    var a_A: dimensionless {pub: in};
    var a_B: dimensionless {pub: in};
    var a_AB: dimensionless {pub: in};
    var h: dimensionless {pub: in};
    J = V*S/Km_S*(1{dimensionless}-P/(S*Keq))*pow(S/Km_S+P/Km_P, h-1{dimensionless})/((1{dimensionless}+pow(M1/Km_M1, h)+pow(M2/Km_M2, h))/(1{dimensionless}+a_A*pow(M1/Km_M1, h)+a_B*pow(M2/Km_M2, h)+a_A*a_B*a_AB*pow(M1/Km_M1, h)*pow(M2/Km_M2, h))+pow(S/Km_S+P/Km_P, h));
  enddef;

  def comp HillIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var n: dimensionless {pub: in};
    J = V*pow(S, n)/(pow(Km_S, n)+pow(S, n));
  enddef;

  def comp HillRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Keq: dimensionless {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var h: dimensionless {pub: in};
    J = V*S/Km_S*(1{dimensionless}-P/(S*Keq))*pow(S/Km_S+P/Km_P, h-1{dimensionless})/(1{dimensionless}+pow(S/Km_S+P/Km_P, h));
  enddef;

  def comp HyperbolicModifierIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var M: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Kd: mM {pub: in};
    var Km_S: mM {pub: in};
    var a: dimensionless {pub: in};
    var b: dimensionless {pub: in};
    J = V*S*(1{dimensionless}+b*M/(a*Kd))/(Km_S*(1{dimensionless}+M/Kd)+S*(1{dimensionless}+M/(a*Kd)));
  enddef;

  def comp HyperbolicModifierRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var M: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Kd: mM {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var a: dimensionless {pub: in};
    var b: dimensionless {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)*(1{dimensionless}+b*M/(a*Kd))/(1{dimensionless}+M/Kd+(S/Km_S+P/Km_P)*(1{dimensionless}+M/(a*Kd)));
  enddef;

  def comp IsoUniUni as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Keq: dimensionless {pub: in};
    var Ki: mM {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    J = V*(S-P/Keq)/(S*(1{dimensionless}+P/Ki)+Km_S*(1{dimensionless}+P/Km_P));
  enddef;
  def unit per_mM_per_second as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp MassActionBiBiRev as
    var J: mM_per_second {pub: out};
    var S1: mM {pub: in};
    var S2: mM {pub: in};
    var P1: mM {pub: in};
    var P2: mM {pub: in};
    var k_f: per_mM_per_second {pub: in};
    var k_b: per_mM_per_second {pub: in};
    J = k_f*S1*S2-k_b*P1*P2;
  enddef;

  def comp MassActionBiIrrev as
    var J: mM_per_second {pub: out};
    var S1: mM {pub: in};
    var S2: mM {pub: in};
    var k_f: per_mM_per_second {pub: in};
    J = k_f*S1*S2;
  enddef;

  def comp MassActionBiUniRev as
    var J: mM_per_second {pub: out};
    var S1: mM {pub: in};
    var S2: mM {pub: in};
    var P: mM {pub: in};
    var k_f: per_mM_per_second {pub: in};
    var k_b: per_second {pub: in};
    J = k_f*S1*S2-k_b*P;
  enddef;

  def comp MassActionUniBiRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P1: mM {pub: in};
    var P2: mM {pub: in};
    var k_f: per_second {pub: in};
    var k_b: per_mM_per_second {pub: in};
    J = k_f*S-k_b*P1*P2;
  enddef;

  def comp MassActionUniIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var k_f: per_second {pub: in};
    J = k_f*S;
  enddef;

  def comp MassActionUniUniRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var k_f: per_second {pub: in};
    var k_b: per_second {pub: in};
    J = k_f*S-k_b*P;
  enddef;

  def comp MichaelisMentenIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    J = V*S/(Km_S+S);
  enddef;

  def comp MichaelisMentenRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)/(1{dimensionless}+S/Km_S+P/Km_P);
  enddef;

  def comp MixedActivationIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var A: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Kac: mM {pub: in};
    var Kas: mM {pub: in};
    var Km_S: mM {pub: in};
    J = V*S*A/(Km_S*(Kas+A)+S*(Kac+A));
  enddef;

  def comp MixedActivationRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var A: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Kac: mM {pub: in};
    var Kas: mM {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)*A/(Kas+A+(S/Km_S+P/Km_P)*(Kac+A));
  enddef;

  def comp MixedInhibitionIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var I: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Kis: mM {pub: in};
    var Kic: mM {pub: in};
    var Km_S: mM {pub: in};
    J = V*S/(Km_S*(1{dimensionless}+I/Kis)+S*(1{dimensionless}+I/Kic));
  enddef;

  def comp MixedInhibitionRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var I: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Kis: mM {pub: in};
    var Kic: mM {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)/(1{dimensionless}+I/Kis+(S/Km_S+P/Km_P)*(1{dimensionless}+I/Kic));
  enddef;

  def comp NoncompetitiveInhibitionIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var I: mM {pub: in};
    var Ki: mM {pub: in};
    J = V*S/((Km_S+S)*(1{dimensionless}+I/Ki));
  enddef;

  def comp NoncompetitiveInhibitionRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var I: mM {pub: in};
    var Ki: mM {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)/((1{dimensionless}+S/Km_S+P/Km_P)*(1{dimensionless}+I/Ki));
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;

  def comp OrderedBiBi as
    var J: mM_per_second {pub: out};
    var S1: mM {pub: in};
    var S2: mM {pub: in};
    var P1: mM {pub: in};
    var P2: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Keq: dimensionless {pub: in};
    var Km_S1: mM {pub: in};
    var Km_S2: mM {pub: in};
    var Km_P1: mM {pub: in};
    var Km_P2: mM {pub: in};
    var Ki_S1: mM {pub: in};
    var Ki_S2: mM {pub: in};
    var Ki_P1: mM {pub: in};
    J = V_f*(S1*S2-P1*P2/Keq)/(S1*S2*(1{dimensionless}+P1/Ki_P1)+Km_S1*S2+Km_S2*(S1+Ki_S1)+V_f/(V_b*Keq)*(Km_P2*P1*(1{dimensionless}+S1/Ki_S1)+P2*(Km_P1*(1{dimensionless}+Km_S1*S2/(Ki_S1*Km_S2))+P1*(1{dimensionless}+S2/Ki_S2))));
  enddef;

  def comp OrderedBiUni as
    var J: mM_per_second {pub: out};
    var S1: mM {pub: in};
    var S2: mM {pub: in};
    var P: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Keq: per_mM {pub: in};
    var Km_S1: mM {pub: in};
    var Km_S2: mM {pub: in};
    var Km_P: mM {pub: in};
    var Ki_S1: mM {pub: in};
    J = V_f*(S1*S2-P/Keq)/(S1*S2+Km_S1*S2+Km_S2*S1+V_f/(V_b*Keq)*(Km_P+P*(1{dimensionless}+S1/Ki_S1)));
  enddef;

  def comp OrderedUniBi as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P1: mM {pub: in};
    var P2: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Keq: mM {pub: in};
    var Km_S: mM {pub: in};
    var Km_P1: mM {pub: in};
    var Km_P2: mM {pub: in};
    var Ki_P1: mM {pub: in};
    J = V_f*(S-P1*P2/Keq)/(Km_S+S*(1{dimensionless}+P1/Ki_P1)+V_f/(V_b*Keq)*(Km_P2*P1+Km_P1*P2+P1*P2));
  enddef;

  def comp PingPongBiBi as
    var J: mM_per_second {pub: out};
    var S1: mM {pub: in};
    var S2: mM {pub: in};
    var P1: mM {pub: in};
    var P2: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Keq: dimensionless {pub: in};
    var Km_S1: mM {pub: in};
    var Km_S2: mM {pub: in};
    var Km_P1: mM {pub: in};
    var Km_P2: mM {pub: in};
    var Ki_S1: mM {pub: in};
    var Ki_P2: mM {pub: in};
    J = V_f*(S1*S2-P1*P2/Keq)/(S1*S2+Km_S2*S1+Km_S1*S2*(1{dimensionless}+P2/Ki_P2)+V_f/(V_b*Keq)*(Km_P2*P1*(1{dimensionless}+S1/Ki_S1)+P2*(Km_P1+P1)));
  enddef;

  def comp SpecificActivationIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var A: mM {pub: in};
    var V: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var Km_A: mM {pub: in};
    J = V*S*A/(Km_S*Km_A+(Km_S+S)*A);
  enddef;

  def comp SpecificActivationRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var A: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var Km_A: mM {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)*A/(Km_A+(1{dimensionless}+S/Km_S+P/Km_P)*A);
  enddef;

  def comp SubstrateActivationIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var V: mM_per_second {pub: in};
    var K_sa: mM {pub: in};
    var K_sc: mM {pub: in};
    J = V*sqr(S/K_sa)/(1{dimensionless}+S/K_sc+S/K_sa+sqr(S/K_sa));
  enddef;

  def comp SubstrateInhibitionIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var V: mM_per_second {pub: in};
    var I: mM {pub: in};
    var Km_S: mM {pub: in};
    var Ki: mM {pub: in};
    J = V*S/(Km_S+S+Km_S*sqr(S)/sqr(Ki));
  enddef;

  def comp SubstrateInhibitionRev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var P: mM {pub: in};
    var V_f: mM_per_second {pub: in};
    var V_b: mM_per_second {pub: in};
    var Km_S: mM {pub: in};
    var Km_P: mM {pub: in};
    var Ki: mM {pub: in};
    J = (V_f*S/Km_S-V_b*P/Km_P)/(1{dimensionless}+S/Km_S+P/Km_P+sqr(S)/sqr(Ki));
  enddef;

  def comp UncompetitiveInhibitionIrrev as
    var J: mM_per_second {pub: out};
    var S: mM {pub: in};
    var V: mM_per_second {pub: in};
    var I: mM {pub: in};
    var Km_S: mM {pub: in};
    var K_I: mM {pub: in};
    J = V*S/(Km_S+S*(1{dimensionless}+I/K_I));
  enddef;
enddef;
