// This CellML file was generated on 3/20/2013 at 2:02:41 at AM using:
//
// COR (0.9.31.1409)
// Copyright 2002-2013 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
def model Koenig2012_Hepatic_Glucose as
  def unit mM as
    unit mole {pref: milli};
    unit liter {expo: -1};
  enddef;
  def unit pM as
    unit mole {pref: pico};
    unit liter {expo: -1};
  enddef;
  def unit mM_mM as
    unit mM;
    unit mM;
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit mM_per_second as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit mM_mM_per_second as
    unit mM;
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit mM_mM_mM_per_second as
    unit mM;
    unit mM;
    unit mM;
    unit second {expo: -1};
  enddef;

  def comp v1_GLUT2 as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var glc_ext: mM {pub: in};
    var glc: mM {pub: in};
    var keq: dimensionless;
    var km: mM;
    var Vmax: mM_per_second;
    keq = 1{dimensionless};
    km = 42{mM};
    Vmax = 420{mM_per_second};
    v = scale_gly*Vmax/km*(glc_ext-glc/keq)/(1{dimensionless}+glc_ext/km+glc/km);
  enddef;

  def comp v2_GK as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var glc: mM {pub: in};
    var fru6p: mM {pub: in};
    var atp: mM {pub: in};
    var n_gkrp: dimensionless;
    var km_glc1: mM;
    var km_fru6p: mM;
    var b: dimensionless;
    var n: dimensionless;
    var km_glc: mM;
    var km_atp: mM;
    var Vmax: mM_per_second;
    var gc_free: dimensionless;
    n_gkrp = 2{dimensionless};
    km_glc1 = 15{mM};
    km_fru6p = 0.01{mM};
    b = 0.7{dimensionless};
    n = 1.6{dimensionless};
    km_glc = 7.5{mM};
    km_atp = 0.26{mM};
    Vmax = 25.2{mM_per_second};
    gc_free = pow(glc, n_gkrp)/(pow(glc, n_gkrp)+pow(km_glc1, n_gkrp))*(1{dimensionless}-b*fru6p/(fru6p+km_fru6p));
    v = scale_gly*Vmax*gc_free*atp/(km_atp+atp)*pow(glc, n)/(pow(glc, n)+pow(km_glc, n));
  enddef;

  def comp v3_G6PASE as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var glc6p: mM {pub: in};
    var km_glc6p: mM;
    var Vmax: mM_per_second;
    km_glc6p = 2{mM};
    Vmax = 18.9{mM_per_second};
    v = scale_gly*Vmax*glc6p/(km_glc6p+glc6p);
  enddef;

  def comp v4_GPI as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var glc6p: mM {pub: in};
    var fru6p: mM {pub: in};
    var keq: dimensionless;
    var km_glc6p: mM;
    var km_fru6p: mM;
    var Vmax: mM_per_second;
    keq = 0.517060817492925{dimensionless};
    km_glc6p = 0.182{mM};
    km_fru6p = 0.071{mM};
    Vmax = 420{mM_per_second};
    v = scale_gly*Vmax/km_glc6p*(glc6p-fru6p/keq)/(1{dimensionless}+glc6p/km_glc6p+fru6p/km_fru6p);
  enddef;

  def comp v5_G1PI as
    var v: mM_per_second {pub: out};
    var scale_glyglc: dimensionless {pub: in};
    var glc6p: mM {pub: in};
    var glc1p: mM {pub: in};
    var keq: dimensionless;
    var km_glc6p: mM;
    var km_glc1p: mM;
    var Vmax: mM_per_second;
    keq = 15.717554082151441{dimensionless};
    km_glc6p = 0.67{mM};
    km_glc1p = 0.045{mM};
    Vmax = 100{mM_per_second};
    v = scale_glyglc*Vmax/km_glc1p*(glc1p-glc6p/keq)/(1{dimensionless}+glc1p/km_glc1p+glc6p/km_glc6p);
  enddef;

  def comp v6_UPGASE as
    var v: mM_per_second {pub: out};
    var scale_glyglc: dimensionless {pub: in};
    var utp: mM {pub: in};
    var glc1p: mM {pub: in};
    var udpglc: mM {pub: in};
    var pp: mM {pub: in};
    var keq: dimensionless;
    var km_utp: mM;
    var km_glc1p: mM;
    var km_udpglc: mM;
    var km_pp: mM;
    var Vmax: mM_per_second;
    keq = 0.312237619153088{dimensionless};
    km_utp = 0.563{mM};
    km_glc1p = 0.172{mM};
    km_udpglc = 0.049{mM};
    km_pp = 0.166{mM};
    Vmax = 80{mM_per_second};
    v = scale_glyglc*Vmax/(km_utp*km_glc1p)*(utp*glc1p-udpglc*pp/keq)/((1{dimensionless}+utp/km_utp)*(1{dimensionless}+glc1p/km_glc1p)+(1{dimensionless}+udpglc/km_udpglc)*(1{dimensionless}+pp/km_pp)-1{dimensionless});
  enddef;

  def comp v7_PPASE as
    var v: mM_per_second {pub: out};
    var scale_glyglc: dimensionless {pub: in};
    var pp: mM {pub: in};
    var km_pp: mM;
    var Vmax: mM_per_second;
    km_pp = 0.005{mM};
    Vmax = 2.4{mM_per_second};
    v = scale_glyglc*Vmax*pp/(pp+km_pp);
  enddef;

  def comp v8_GS as
    var v: mM_per_second {pub: out};
    var scale_glyglc: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var glyglc: mM {pub: in};
    var glc6p: mM {pub: in};
    var udpglc: mM {pub: in};
    var C: mM;
    var k1_max: dimensionless;
    var k1_nat: mM_mM;
    var k2_nat: mM;
    var k1_phospho: mM_mM;
    var k2_phospho: mM;
    var Vmax: mM_per_second;
    var storage_factor: dimensionless;
    var k_udpglc_native: mM;
    var k_udpglc_phospho: mM;
    var v_native: mM_per_second;
    var v_phospho: mM_per_second;
    C = 500{mM};
    k1_max = 0.2{dimensionless};
    k1_nat = 0.224{mM_mM};
    k2_nat = 0.1504{mM};
    k1_phospho = 3.003{mM_mM};
    k2_phospho = 0.09029{mM};
    Vmax = 13.2{mM_per_second};
    storage_factor = (1{dimensionless}+k1_max)*(C-glyglc)/(C-glyglc+k1_max*C);
    k_udpglc_native = k1_nat/(glc6p+k2_nat);
    k_udpglc_phospho = k1_phospho/(glc6p+k2_phospho);
    v_native = scale_glyglc*Vmax*storage_factor*udpglc/(k_udpglc_native+udpglc);
    v_phospho = scale_glyglc*Vmax*storage_factor*udpglc/(k_udpglc_phospho+udpglc);
    v = (1{dimensionless}-gamma)*v_native+gamma*v_phospho;
  enddef;

  def comp v9_GP as
    var v: mM_per_second {pub: out};
    var scale_glyglc: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var glyglc: mM {pub: in};
    var glc: mM {pub: in};
    var amp: mM {pub: in};
    var p: mM {pub: in};
    var glc1p: mM {pub: in};
    var keq: per_mM;
    var k_glyc_native: mM;
    var k_glyc_phospho: mM;
    var k_glc1p_native: mM;
    var k_glc1p_phospho: mM;
    var k_p_native: mM;
    var k_p_phospho: mM;
    var ki_glc_phospho: mM;
    var ka_amp_native: mM;
    var base_amp_native: dimensionless;
    var max_amp_native: dimensionless;
    var Vmax: mM_per_second;
    var C: mM;
    var k1_max: dimensionless;
    var fmax: dimensionless;
    var vmax_native: mM_per_second;
    var v_native: mM_per_second;
    var vmax_phospho: mM_per_second;
    var v_phospho: mM_per_second;
    keq = 0.211826505793075{per_mM};
    k_glyc_native = 4.8{mM};
    k_glyc_phospho = 2.7{mM};
    k_glc1p_native = 120{mM};
    k_glc1p_phospho = 2{mM};
    k_p_native = 300{mM};
    k_p_phospho = 5{mM};
    ki_glc_phospho = 5{mM};
    ka_amp_native = 1{mM};
    base_amp_native = 0.03{dimensionless};
    max_amp_native = 0.3{dimensionless};
    Vmax = 6.8{mM_per_second};
    C = 500{mM};
    k1_max = 0.2{dimensionless};
    fmax = (1{dimensionless}+k1_max)*glyglc/(glyglc+k1_max*C);
    vmax_native = scale_glyglc*Vmax*fmax*(base_amp_native+(max_amp_native-base_amp_native)*amp/(amp+ka_amp_native));
    v_native = vmax_native/(k_glyc_native*k_p_native)*(glyglc*p-glc1p/keq)/((1{dimensionless}+glyglc/k_glyc_native)*(1{dimensionless}+p/k_p_native)+1{dimensionless}+glc1p/k_glc1p_native-1{dimensionless});
    vmax_phospho = scale_glyglc*Vmax*fmax*exp(-log(2{dimensionless})/ki_glc_phospho*glc);
    v_phospho = vmax_phospho/(k_glyc_phospho*k_p_phospho)*(glyglc*p-glc1p/keq)/((1{dimensionless}+glyglc/k_glyc_phospho)*(1{dimensionless}+p/k_p_phospho)+1{dimensionless}+glc1p/k_glc1p_phospho-1{dimensionless});
    v = (1{dimensionless}-gamma)*v_native+gamma*v_phospho;
  enddef;

  def comp v10_NDK_GTP as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var atp: mM {pub: in};
    var gdp: mM {pub: in};
    var adp: mM {pub: in};
    var gtp: mM {pub: in};
    var keq: dimensionless;
    var km_atp: mM;
    var km_adp: mM;
    var km_gtp: mM;
    var km_gdp: mM;
    var Vmax: mM_per_second;
    keq = 1{dimensionless};
    km_atp = 1.33{mM};
    km_adp = 0.042{mM};
    km_gtp = 0.15{mM};
    km_gdp = 0.031{mM};
    Vmax = 0{mM_per_second};
    v = scale_gly*Vmax/(km_atp*km_gdp)*(atp*gdp-adp*gtp/keq)/((1{dimensionless}+atp/km_atp)*(1{dimensionless}+gdp/km_gdp)+(1{dimensionless}+adp/km_adp)*(1{dimensionless}+gtp/km_gtp)-1{dimensionless});
  enddef;

  def comp v11_NDK_UTP as
    var v: mM_per_second {pub: out};
    var scale_glyglc: dimensionless {pub: in};
    var atp: mM {pub: in};
    var udp: mM {pub: in};
    var adp: mM {pub: in};
    var utp: mM {pub: in};
    var keq: dimensionless;
    var km_atp: mM;
    var km_adp: mM;
    var km_utp: mM;
    var km_udp: mM;
    var Vmax: mM_per_second;
    keq = 1{dimensionless};
    km_atp = 1.33{mM};
    km_adp = 0.042{mM};
    km_utp = 16{mM};
    km_udp = 0.19{mM};
    Vmax = 2940{mM_per_second};
    v = scale_glyglc*Vmax/(km_atp*km_udp)*(atp*udp-adp*utp/keq)/((1{dimensionless}+atp/km_atp)*(1{dimensionless}+udp/km_udp)+(1{dimensionless}+adp/km_adp)*(1{dimensionless}+utp/km_utp)-1{dimensionless});
  enddef;

  def comp v12_AKAT as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var atp: mM {pub: in};
    var adp: mM {pub: in};
    var amp: mM {pub: in};
    var keq: dimensionless;
    var km_atp: mM;
    var km_amp: mM;
    var km_adp: mM;
    var Vmax: mM_per_second;
    keq = 0.247390074904985{dimensionless};
    km_atp = 0.09{mM};
    km_amp = 0.08{mM};
    km_adp = 0.11{mM};
    Vmax = 0{mM_per_second};
    v = scale_gly*Vmax/(km_atp*km_amp)*(atp*amp-adp*adp/keq)/((1{dimensionless}+atp/km_atp)*(1{dimensionless}+amp/km_amp)+(1{dimensionless}+adp/km_adp)*(1{dimensionless}+adp/km_adp)-1{dimensionless});
  enddef;

  def comp v13_PFK2 as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var fru6p: mM {pub: in};
    var atp: mM {pub: in};
    var n_native: dimensionless;
    var n_phospho: dimensionless;
    var k_fru6p_native: mM;
    var k_fru6p_phospho: mM;
    var k_atp_native: mM;
    var k_atp_phospho: mM;
    var Vmax: mM_per_second;
    var v_native: mM_per_second;
    var v_phospho: mM_per_second;
    n_native = 1.3{dimensionless};
    n_phospho = 2.1{dimensionless};
    k_fru6p_native = 0.016{mM};
    k_fru6p_phospho = 0.05{mM};
    k_atp_native = 0.28{mM};
    k_atp_phospho = 0.65{mM};
    Vmax = 0.0042{mM_per_second};
    v_native = scale_gly*Vmax*pow(fru6p, n_native)/(pow(fru6p, n_native)+pow(k_fru6p_native, n_native))*atp/(atp+k_atp_native);
    v_phospho = scale_gly*Vmax*pow(fru6p, n_phospho)/(pow(fru6p, n_phospho)+pow(k_fru6p_phospho, n_phospho))*atp/(atp+k_atp_phospho);
    v = (1{dimensionless}-gamma)*v_native+gamma*v_phospho;
  enddef;

  def comp v14_FBP2 as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var fru6p: mM {pub: in};
    var fru26bp: mM {pub: in};
    var km_fru26bp_native: mM;
    var ki_fru6p_native: mM;
    var km_fru26bp_phospho: mM;
    var ki_fru6p_phospho: mM;
    var Vmax: mM_per_second;
    var v_native: mM_per_second;
    var v_phospho: mM_per_second;
    km_fru26bp_native = 0.01{mM};
    ki_fru6p_native = 0.0035{mM};
    km_fru26bp_phospho = 0.0005{mM};
    ki_fru6p_phospho = 0.01{mM};
    Vmax = 0.126{mM_per_second};
    v_native = scale_gly*Vmax/(1{dimensionless}+fru6p/ki_fru6p_native)*fru26bp/(km_fru26bp_native+fru26bp);
    v_phospho = scale_gly*Vmax/(1{dimensionless}+fru6p/ki_fru6p_phospho)*fru26bp/(km_fru26bp_phospho+fru26bp);
    v = (1{dimensionless}-gamma)*v_native+gamma*v_phospho;
  enddef;

  def comp v15_PFK1 as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var fru26bp: mM {pub: in};
    var fru6p: mM {pub: in};
    var atp: mM {pub: in};
    var km_atp: mM;
    var km_fru6p: mM;
    var ki_fru6p: mM;
    var ka_fru26bp: mM;
    var Vmax: mM_per_second;
    km_atp = 0.111{mM};
    km_fru6p = 0.077{mM};
    ki_fru6p = 0.012{mM};
    ka_fru26bp = 0.001{mM};
    Vmax = 7.182{mM_per_second};
    v = scale_gly*Vmax*(1{dimensionless}-1{dimensionless}/(1{dimensionless}+fru26bp/ka_fru26bp))*fru6p*atp/(ki_fru6p*km_atp+km_fru6p*atp+km_atp*fru6p+atp*fru6p);
  enddef;

  def comp v16_FBP1 as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var fru26bp: mM {pub: in};
    var fru16bp: mM {pub: in};
    var ki_fru26bp: mM;
    var km_fru16bp: mM;
    var Vmax: mM_per_second;
    ki_fru26bp = 0.001{mM};
    km_fru16bp = 0.0013{mM};
    Vmax = 4.326{mM_per_second};
    v = scale_gly*Vmax/(1{dimensionless}+fru26bp/ki_fru26bp)*fru16bp/(fru16bp+km_fru16bp);
  enddef;

  def comp v17_ALD as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var fru16bp: mM {pub: in};
    var grap: mM {pub: in};
    var dhap: mM {pub: in};
    var keq: mM;
    var km_fru16bp: mM;
    var km_dhap: mM;
    var km_grap: mM;
    var ki1_grap: mM;
    var ki2_grap: mM;
    var Vmax: mM_per_second;
    keq = 9.76298897362969e-5{mM};
    km_fru16bp = 0.0071{mM};
    km_dhap = 0.0364{mM};
    km_grap = 0.0071{mM};
    ki1_grap = 0.0572{mM};
    ki2_grap = 0.176{mM};
    Vmax = 420{mM_per_second};
    v = scale_gly*Vmax/km_fru16bp*(fru16bp-grap*dhap/keq)/(1{dimensionless}+fru16bp/km_fru16bp+grap/ki1_grap+dhap*(grap+km_grap)/(km_dhap*ki1_grap)+fru16bp*grap/(km_fru16bp*ki2_grap));
  enddef;

  def comp v18_TPI as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var grap: mM {pub: in};
    var dhap: mM {pub: in};
    var keq: dimensionless;
    var km_dhap: mM;
    var km_grap: mM;
    var Vmax: mM_per_second;
    keq = 0.054476985386756{dimensionless};
    km_dhap = 0.59{mM};
    km_grap = 0.42{mM};
    Vmax = 420{mM_per_second};
    v = scale_gly*Vmax/km_dhap*(dhap-grap/keq)/(1{dimensionless}+dhap/km_dhap+grap/km_grap);
  enddef;

  def comp v19_GAPDH as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var nad: mM {pub: in};
    var grap: mM {pub: in};
    var p: mM {pub: in};
    var bpg13: mM {pub: in};
    var nadh: mM {pub: in};
    var keq: per_mM;
    var k_nad: mM;
    var k_grap: mM;
    var k_p: mM;
    var k_nadh: mM;
    var k_bpg13: mM;
    var Vmax: mM_per_second;
    keq = 0.086779866194594{per_mM};
    k_nad = 0.05{mM};
    k_grap = 0.005{mM};
    k_p = 3.9{mM};
    k_nadh = 0.0083{mM};
    k_bpg13 = 0.0035{mM};
    Vmax = 420{mM_per_second};
    v = scale_gly*Vmax/(k_nad*k_grap*k_p)*(nad*grap*p-bpg13*nadh/keq)/((1{dimensionless}+nad/k_nad)*(1{dimensionless}+grap/k_grap)*(1{dimensionless}+p/k_p)+(1{dimensionless}+nadh/k_nadh)*(1{dimensionless}+bpg13/k_bpg13)-1{dimensionless});
  enddef;

  def comp v20_PGK as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var adp: mM {pub: in};
    var bpg13: mM {pub: in};
    var atp: mM {pub: in};
    var pg3: mM {pub: in};
    var keq: dimensionless;
    var k_adp: mM;
    var k_atp: mM;
    var k_bpg13: mM;
    var k_pg3: mM;
    var Vmax: mM_per_second;
    keq = 6.958644052488538{dimensionless};
    k_adp = 0.35{mM};
    k_atp = 0.48{mM};
    k_bpg13 = 0.002{mM};
    k_pg3 = 1.2{mM};
    Vmax = 420{mM_per_second};
    v = scale_gly*Vmax/(k_adp*k_bpg13)*(adp*bpg13-atp*pg3/keq)/((1{dimensionless}+adp/k_adp)*(1{dimensionless}+bpg13/k_bpg13)+(1{dimensionless}+atp/k_atp)*(1{dimensionless}+pg3/k_pg3)-1{dimensionless});
  enddef;

  def comp v21_PGM as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var pg3: mM {pub: in};
    var pg2: mM {pub: in};
    var keq: dimensionless;
    var k_pg3: mM;
    var k_pg2: mM;
    var Vmax: mM_per_second;
    keq = 0.181375378837397{dimensionless};
    k_pg3 = 5{mM};
    k_pg2 = 1{mM};
    Vmax = 420{mM_per_second};
    v = scale_gly*Vmax*(pg3-pg2/keq)/(pg3+k_pg3*(1{dimensionless}+pg2/k_pg2));
  enddef;

  def comp v22_ENO as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var pep: mM {pub: in};
    var pg2: mM {pub: in};
    var keq: dimensionless;
    var k_pep: mM;
    var k_pg2: mM;
    var Vmax: mM_per_second;
    keq = 0.054476985386756{dimensionless};
    k_pep = 1{mM};
    k_pg2 = 1{mM};
    Vmax = 35.994{mM_per_second};
    v = scale_gly*Vmax*(pg2-pep/keq)/(pg2+k_pg2*(1{dimensionless}+pep/k_pep));
  enddef;

  def comp v23_PK as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var pep: mM {pub: in};
    var fru16bp: mM {pub: in};
    var adp: mM {pub: in};
    var n: dimensionless;
    var n_p: dimensionless;
    var n_fbp: dimensionless;
    var n_fbp_p: dimensionless;
    var alpha: dimensionless;
    var alpha_p: dimensionless;
    var alpha_end: dimensionless;
    var k_fbp: mM;
    var k_fbp_p: mM;
    var k_pep: mM;
    var k_pep_p: mM;
    var k_pep_end: mM;
    var k_adp: mM;
    var base_act: dimensionless;
    var base_act_p: dimensionless;
    var Vmax: mM_per_second;
    var f: dimensionless;
    var f_p: dimensionless;
    var alpha_inp: dimensionless;
    var alpha_p_inp: dimensionless;
    var pep_inp: mM;
    var pep_p_inp: mM;
    var v_native: mM_per_second;
    var v_phospho: mM_per_second;
    n = 3.5{dimensionless};
    n_p = 3.5{dimensionless};
    n_fbp = 1.8{dimensionless};
    n_fbp_p = 1.8{dimensionless};
    alpha = 1{dimensionless};
    alpha_p = 1.1{dimensionless};
    alpha_end = 1{dimensionless};
    k_fbp = 0.16e-3{mM};
    k_fbp_p = 0.35e-3{mM};
    k_pep = 0.58{mM};
    k_pep_p = 1.1{mM};
    k_pep_end = 0.08{mM};
    k_adp = 2.3{mM};
    base_act = 0.08{dimensionless};
    base_act_p = 0.04{dimensionless};
    Vmax = 46.2{mM_per_second};
    f = pow(fru16bp, n_fbp)/(pow(k_fbp, n_fbp)+pow(fru16bp, n_fbp));
    f_p = pow(fru16bp, n_fbp_p)/(pow(k_fbp_p, n_fbp_p)+pow(fru16bp, n_fbp_p));
    alpha_inp = (1{dimensionless}-f)*(alpha-alpha_end)+alpha_end;
    alpha_p_inp = (1{dimensionless}-f_p)*(alpha_p-alpha_end)+alpha_end;
    pep_inp = (1{dimensionless}-f)*(k_pep-k_pep_end)+k_pep_end;
    pep_p_inp = (1{dimensionless}-f_p)*(k_pep_p-k_pep_end)+k_pep_end;
    v_native = scale_gly*Vmax*alpha_inp*pow(pep, n)/(pow(pep_inp, n)+pow(pep, n))*adp/(adp+k_adp)*(base_act+(1{dimensionless}-base_act)*f);
    v_phospho = scale_gly*Vmax*alpha_p_inp*pow(pep, n_p)/(pow(pep_p_inp, n_p)+pow(pep, n_p))*adp/(adp+k_adp)*(base_act_p+(1{dimensionless}-base_act_p)*f_p);
    v = (1{dimensionless}-gamma)*v_native+gamma*v_phospho;
  enddef;

  def comp v24_PEPCK as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var pep: mM {pub: in};
    var oaa: mM {pub: in};
    var gtp: mM {pub: in};
    var gdp: mM {pub: in};
    var co2: mM {pub: in};
    var keq: mM;
    var k_pep: mM;
    var k_gdp: mM;
    var k_co2: mM;
    var k_oaa: mM;
    var k_gtp: mM;
    var Vmax: mM_per_second;
    keq = 3.369565215864287e2{mM};
    k_pep = 0.237{mM};
    k_gdp = 0.0921{mM};
    k_co2 = 25.5{mM};
    k_oaa = 0.0055{mM};
    k_gtp = 0.0222{mM};
    Vmax = 0{mM_per_second};
    v = scale_gly*Vmax/(k_oaa*k_gtp)*(oaa*gtp-pep*gdp*co2/keq)/((1{dimensionless}+oaa/k_oaa)*(1{dimensionless}+gtp/k_gtp)+(1{dimensionless}+pep/k_pep)*(1{dimensionless}+gdp/k_gdp)*(1{dimensionless}+co2/k_co2)-1{dimensionless});
  enddef;

  def comp v25_PEPCKM as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var pep_mito: mM {pub: in};
    var oaa_mito: mM {pub: in};
    var gtp_mito: mM {pub: in};
    var gdp_mito: mM {pub: in};
    var co2_mito: mM {pub: in};
    var keq: mM;
    var k_pep: mM;
    var k_gdp: mM;
    var k_co2: mM;
    var k_oaa: mM;
    var k_gtp: mM;
    var Vmax: mM_per_second;
    keq = 3.369565215864287e2{mM};
    k_pep = 0.237{mM};
    k_gdp = 0.0921{mM};
    k_co2 = 25.5{mM};
    k_oaa = 0.0055{mM};
    k_gtp = 0.0222{mM};
    Vmax = 546{mM_per_second};
    v = scale_gly*Vmax/(k_oaa*k_gtp)*(oaa_mito*gtp_mito-pep_mito*gdp_mito*co2_mito/keq)/((1{dimensionless}+oaa_mito/k_oaa)*(1{dimensionless}+gtp_mito/k_gtp)+(1{dimensionless}+pep_mito/k_pep)*(1{dimensionless}+gdp_mito/k_gdp)*(1{dimensionless}+co2_mito/k_co2)-1{dimensionless});
  enddef;

  def comp v26_PC as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var pyr_mito: mM {pub: in};
    var atp_mito: mM {pub: in};
    var co2_mito: mM {pub: in};
    var acoa_mito: mM {pub: in};
    var k_atp: mM;
    var k_pyr: mM;
    var k_co2: mM;
    var k_acoa: mM;
    var n: dimensionless;
    var Vmax: mM_per_second;
    k_atp = 0.22{mM};
    k_pyr = 0.22{mM};
    k_co2 = 3.2{mM};
    k_acoa = 0.015{mM};
    n = 2.5{dimensionless};
    Vmax = 168{mM_per_second};
    v = scale_gly*Vmax*atp_mito/(k_atp+atp_mito)*pyr_mito/(k_pyr+pyr_mito)*co2_mito/(k_co2+co2_mito)*pow(acoa_mito, n)/(pow(acoa_mito, n)+pow(k_acoa, n));
  enddef;

  def comp v27_LDH as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var pyr: mM {pub: in};
    var nadh: mM {pub: in};
    var lac: mM {pub: in};
    var nad: mM {pub: in};
    var keq: dimensionless;
    var k_pyr: mM;
    var k_lac: mM;
    var k_nad: mM;
    var k_nadh: mM;
    var Vmax: mM_per_second;
    keq = 2.78321076004752e-4{dimensionless};
    k_pyr = 0.495{mM};
    k_lac = 31.98{mM};
    k_nad = 0.984{mM};
    k_nadh = 0.027{mM};
    Vmax = 12.6{mM_per_second};
    v = scale_gly*Vmax/(k_pyr*k_nadh)*(pyr*nadh-lac*nad/keq)/((1{dimensionless}+nadh/k_nadh)*(1{dimensionless}+pyr/k_pyr)+(1{dimensionless}+lac/k_lac)*(1{dimensionless}+nad/k_nad)-1{dimensionless});
  enddef;

  def comp v28_LACT as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var lac: mM {pub: in};
    var lac_ext: mM {pub: in};
    var keq: dimensionless;
    var k_lac: mM;
    var Vmax: mM_per_second;
    keq = 1{dimensionless};
    k_lac = 0.8{mM};
    Vmax = 5.418{mM_per_second};
    v = scale_gly*Vmax/k_lac*(lac_ext-lac/keq)/(1{dimensionless}+lac_ext/k_lac+lac/k_lac);
  enddef;

  def comp v29_PYRT as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var pyr: mM {pub: in};
    var pyr_mito: mM {pub: in};
    var keq: dimensionless;
    var k_pyr: mM;
    var Vmax: mM_per_second;
    keq = 1{dimensionless};
    k_pyr = 0.1{mM};
    Vmax = 42{mM_per_second};
    v = scale_gly*Vmax/k_pyr*(pyr-pyr_mito/keq)/(1{dimensionless}+pyr/k_pyr+pyr_mito/k_pyr);
  enddef;

  def comp v30_PEPT as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var pep: mM {pub: in};
    var pep_mito: mM {pub: in};
    var keq: dimensionless;
    var k_pep: mM;
    var Vmax: mM_per_second;
    keq = 1{dimensionless};
    k_pep = 0.1{mM};
    Vmax = 33.6{mM_per_second};
    v = scale_gly*Vmax/k_pep*(pep_mito-pep/keq)/(1{dimensionless}+pep/k_pep+pep_mito/k_pep);
  enddef;

  def comp v31_PDH as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var pyr_mito: mM {pub: in};
    var nad_mito: mM {pub: in};
    var nadh_mito: mM {pub: in};
    var coa_mito: mM {pub: in};
    var acoa_mito: mM {pub: in};
    var k_pyr: mM;
    var k_coa: mM;
    var k_nad: mM;
    var ki_acoa: mM;
    var ki_nadh: mM;
    var alpha_nat: dimensionless;
    var alpha_p: dimensionless;
    var Vmax: mM_per_second;
    var v_base: mM_per_second;
    var v_nat: mM_per_second;
    var v_p: mM_per_second;
    k_pyr = 0.025{mM};
    k_coa = 0.013{mM};
    k_nad = 0.05{mM};
    ki_acoa = 0.035{mM};
    ki_nadh = 0.036{mM};
    alpha_nat = 5{dimensionless};
    alpha_p = 1{dimensionless};
    Vmax = 13.44{mM_per_second};
    v_base = scale_gly*Vmax*pyr_mito/(pyr_mito+k_pyr)*nad_mito/(nad_mito+k_nad*(1{dimensionless}+nadh_mito/ki_nadh))*coa_mito/(coa_mito+k_coa*(1{dimensionless}+acoa_mito/ki_acoa));
    v_nat = v_base*alpha_nat;
    v_p = v_base*alpha_p;
    v = (1{dimensionless}-gamma)*v_nat+gamma*v_p;
  enddef;

  def comp v32_CS as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var coa_mito: mM {pub: in};
    var acoa_mito: mM {pub: in};
    var oaa_mito: mM {pub: in};
    var cit_mito: mM {pub: in};
    var keq: dimensionless;
    var k_oaa: mM;
    var k_acoa: mM;
    var k_cit: mM;
    var k_coa: mM;
    var Vmax: mM_per_second;
    keq = 2.665990308427589e5{dimensionless};
    k_oaa = 0.002{mM};
    k_acoa = 0.016{mM};
    k_cit = 0.42{mM};
    k_coa = 0.07{mM};
    Vmax = 4.2{mM_per_second};
    v = scale_gly*Vmax/(k_oaa*k_acoa)*(acoa_mito*oaa_mito-cit_mito*coa_mito/keq)/((1{dimensionless}+acoa_mito/k_acoa)*(1{dimensionless}+oaa_mito/k_oaa)+(1{dimensionless}+cit_mito/k_cit)*(1{dimensionless}+coa_mito/k_coa)-1{dimensionless});
  enddef;

  def comp v33_NDKMG as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var atp_mito: mM {pub: in};
    var adp_mito: mM {pub: in};
    var gtp_mito: mM {pub: in};
    var gdp_mito: mM {pub: in};
    var keq: dimensionless;
    var k_atp: mM;
    var k_adp: mM;
    var k_gtp: mM;
    var k_gdp: mM;
    var Vmax: mM_per_second;
    keq = 1{dimensionless};
    k_atp = 1.33{mM};
    k_adp = 0.042{mM};
    k_gtp = 0.15{mM};
    k_gdp = 0.031{mM};
    Vmax = 420{mM_per_second};
    v = scale_gly*Vmax/(k_atp*k_gdp)*(atp_mito*gdp_mito-adp_mito*gtp_mito/keq)/((1{dimensionless}+atp_mito/k_atp)*(1{dimensionless}+gdp_mito/k_gdp)+(1{dimensionless}+adp_mito/k_adp)*(1{dimensionless}+gtp_mito/k_gtp)-1{dimensionless});
  enddef;

  def comp v34_OAA_FLUX as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var Vmax: mM_per_second;
    Vmax = 0{mM_per_second};
    v = scale_gly*Vmax;
  enddef;

  def comp v35_ACOA_FLUX as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var Vmax: mM_per_second;
    Vmax = 0{mM_per_second};
    v = scale_gly*Vmax;
  enddef;

  def comp v36_CIT_FLUX as
    var v: mM_per_second {pub: out};
    var scale_gly: dimensionless {pub: in};
    var Vmax: mM_per_second;
    Vmax = 0{mM_per_second};
    v = scale_gly*Vmax;
  enddef;

  def comp GlucoseMetabolism as
    var t: second;
    var gamma: dimensionless {priv: in, pub: out};
    var atp: mM {init: 2.8, pub: out};
    var adp: mM {init: 0.8, pub: out};
    var amp: mM {init: 0.16, pub: out};
    var utp: mM {init: 0.27, pub: out};
    var udp: mM {init: 0.09, pub: out};
    var gtp: mM {init: 0.29, pub: out};
    var gdp: mM {init: 0.1, pub: out};
    var nad: mM {init: 1.22, pub: out};
    var nadh: mM {init: 0.56e-3, pub: out};
    var p: mM {init: 5, pub: out};
    var pp: mM {init: 0.008, pub: out};
    var co2: mM {init: 5, pub: out};
    var udpglc: mM {init: 0.38, pub: out};
    var glyglc: mM {init: 250, pub: out};
    var glc: mM {init: 5, pub: out};
    var glc1p: mM {init: 0.012, pub: out};
    var glc6p: mM {init: 0.12, pub: out};
    var fru6p: mM {init: 0.05, pub: out};
    var fru16bp: mM {init: 0.02, pub: out};
    var fru26bp: mM {init: 0.004, pub: out};
    var grap: mM {init: 0.1, pub: out};
    var dhap: mM {init: 0.03, pub: out};
    var bpg13: mM {init: 0.3, pub: out};
    var pg3: mM {init: 0.27, pub: out};
    var pg2: mM {init: 0.03, pub: out};
    var pep: mM {init: 0.15, pub: out};
    var pyr: mM {init: 0.1, pub: out};
    var oaa: mM {init: 0.01, pub: out};
    var lac: mM {init: 0.5, pub: out};
    var glc_ext: mM {init: 3, priv: out, pub: out};
    var lac_ext: mM {init: 1.2, pub: out};
    var co2_mito: mM {init: 5, pub: out};
    var p_mito: mM {init: 5};
    var oaa_mito: mM {init: 0.01, pub: out};
    var pep_mito: mM {init: 0.15, pub: out};
    var acoa_mito: mM {init: 0.04, pub: out};
    var pyr_mito: mM {init: 0.1, pub: out};
    var cit_mito: mM {init: 0.32, pub: out};
    var atp_mito: mM {init: 2.8, pub: out};
    var adp_mito: mM {init: 0.8, pub: out};
    var gtp_mito: mM {init: 0.29, pub: out};
    var gdp_mito: mM {init: 0.1, pub: out};
    var coa_mito: mM {init: 0.055, pub: out};
    var nadh_mito: mM {init: 0.24, pub: out};
    var nad_mito: mM {init: 0.98, pub: out};
    var scale_gly: dimensionless {init: 12.5, pub: out};
    var scale_glyglc: dimensionless {init: 1, pub: out};
    var v1: mM_per_second {pub: in};
    var v2: mM_per_second {pub: in};
    var v3: mM_per_second {pub: in};
    var v4: mM_per_second {pub: in};
    var v5: mM_per_second {pub: in};
    var v6: mM_per_second {pub: in};
    var v7: mM_per_second {pub: in};
    var v8: mM_per_second {pub: in};
    var v9: mM_per_second {pub: in};
    var v10: mM_per_second {pub: in};
    var v11: mM_per_second {pub: in};
    var v12: mM_per_second {pub: in};
    var v13: mM_per_second {pub: in};
    var v14: mM_per_second {pub: in};
    var v15: mM_per_second {pub: in};
    var v16: mM_per_second {pub: in};
    var v17: mM_per_second {pub: in};
    var v18: mM_per_second {pub: in};
    var v19: mM_per_second {pub: in};
    var v20: mM_per_second {pub: in};
    var v21: mM_per_second {pub: in};
    var v22: mM_per_second {pub: in};
    var v23: mM_per_second {pub: in};
    var v24: mM_per_second {pub: in};
    var v25: mM_per_second {pub: in};
    var v26: mM_per_second {pub: in};
    var v27: mM_per_second {pub: in};
    var v28: mM_per_second {pub: in};
    var v29: mM_per_second {pub: in};
    var v30: mM_per_second {pub: in};
    var v31: mM_per_second {pub: in};
    var v32: mM_per_second {pub: in};
    var v33: mM_per_second {pub: in};
    var v34: mM_per_second {pub: in};
    var v35: mM_per_second {pub: in};
    var v36: mM_per_second {pub: in};
    var Vol_mc: dimensionless;
    Vol_mc = 5{dimensionless};
    ode(atp, t) = 0{mM_per_second};
    ode(adp, t) = 0{mM_per_second};
    ode(amp, t) = 0{mM_per_second};
    ode(utp, t) = -v6+v11;
    ode(udp, t) = v8-v11;
    ode(gtp, t) = v10-v24;
    ode(gdp, t) = -v10+v24;
    ode(nad, t) = 0{mM_per_second};
    ode(nadh, t) = 0{mM_per_second};
    ode(p, t) = 0{mM_per_second};
    ode(pp, t) = v6-v7;
    ode(co2, t) = 0{mM_per_second};
    ode(glc1p, t) = -v5-v6+v9;
    ode(udpglc, t) = v6-v8;
    ode(glyglc, t) = v8-v9;
    ode(glc, t) = v1-v2+v3;
    ode(glc6p, t) = v2-v3-v4+v5;
    ode(fru6p, t) = v4-v13+v14-v15+v16;
    ode(fru16bp, t) = v15-v16-v17;
    ode(fru26bp, t) = v13-v14;
    ode(grap, t) = v17+v18-v19;
    ode(dhap, t) = v17-v18;
    ode(bpg13, t) = v19-v20;
    ode(pg3, t) = v20-v21;
    ode(pg2, t) = v21-v22;
    ode(pep, t) = v22-v23+v24+v30;
    ode(pyr, t) = v23-v27-v29;
    ode(oaa, t) = -v24;
    ode(lac, t) = v27+v28;
    ode(glc_ext, t) = 0{mM_per_second};
    ode(lac_ext, t) = 0{mM_per_second};
    ode(co2_mito, t) = 0{mM_per_second};
    ode(p_mito, t) = 0{mM_per_second};
    ode(oaa_mito, t) = -Vol_mc*v25+Vol_mc*v26-Vol_mc*v32+Vol_mc*v34;
    ode(pep_mito, t) = Vol_mc*v25-Vol_mc*v30;
    ode(acoa_mito, t) = 0{mM_per_second};
    ode(pyr_mito, t) = 0{mM_per_second};
    ode(cit_mito, t) = 0{mM_per_second};
    ode(atp_mito, t) = 0{mM_per_second};
    ode(adp_mito, t) = 0{mM_per_second};
    ode(gtp_mito, t) = -Vol_mc*v25+Vol_mc*v33;
    ode(gdp_mito, t) = Vol_mc*v25-Vol_mc*v33;
    ode(coa_mito, t) = 0{mM_per_second};
    ode(nadh_mito, t) = 0{mM_per_second};
    ode(nad_mito, t) = 0{mM_per_second};
  enddef;
  def map between GlucoseMetabolism and Gamma for
    vars glc_ext and glc;
    vars gamma and gamma;
  enddef;
  def map between GlucoseMetabolism and v1_GLUT2 for
    vars v1 and v;
    vars scale_gly and scale_gly;
    vars glc_ext and glc_ext;
    vars glc and glc;
  enddef;
  def map between GlucoseMetabolism and v2_GK for
    vars v2 and v;
    vars scale_gly and scale_gly;
    vars glc and glc;
    vars fru6p and fru6p;
    vars atp and atp;
  enddef;
  def map between GlucoseMetabolism and v3_G6PASE for
    vars v3 and v;
    vars scale_gly and scale_gly;
    vars glc6p and glc6p;
  enddef;
  def map between GlucoseMetabolism and v4_GPI for
    vars v4 and v;
    vars scale_gly and scale_gly;
    vars glc6p and glc6p;
    vars fru6p and fru6p;
  enddef;
  def map between GlucoseMetabolism and v5_G1PI for
    vars v5 and v;
    vars scale_glyglc and scale_glyglc;
    vars glc6p and glc6p;
    vars glc1p and glc1p;
  enddef;
  def map between GlucoseMetabolism and v6_UPGASE for
    vars v6 and v;
    vars scale_glyglc and scale_glyglc;
    vars utp and utp;
    vars glc1p and glc1p;
    vars udpglc and udpglc;
    vars pp and pp;
  enddef;
  def map between GlucoseMetabolism and v7_PPASE for
    vars v7 and v;
    vars scale_glyglc and scale_glyglc;
    vars pp and pp;
  enddef;
  def map between GlucoseMetabolism and v8_GS for
    vars v8 and v;
    vars scale_glyglc and scale_glyglc;
    vars gamma and gamma;
    vars glyglc and glyglc;
    vars glc6p and glc6p;
    vars udpglc and udpglc;
  enddef;
  def map between GlucoseMetabolism and v9_GP for
    vars v9 and v;
    vars scale_glyglc and scale_glyglc;
    vars gamma and gamma;
    vars glyglc and glyglc;
    vars glc and glc;
    vars amp and amp;
    vars p and p;
    vars glc1p and glc1p;
  enddef;
  def map between GlucoseMetabolism and v10_NDK_GTP for
    vars v10 and v;
    vars scale_gly and scale_gly;
    vars atp and atp;
    vars adp and adp;
    vars gtp and gtp;
    vars gdp and gdp;
  enddef;
  def map between GlucoseMetabolism and v11_NDK_UTP for
    vars v11 and v;
    vars scale_glyglc and scale_glyglc;
    vars atp and atp;
    vars adp and adp;
    vars utp and utp;
    vars udp and udp;
  enddef;
  def map between GlucoseMetabolism and v12_AKAT for
    vars v12 and v;
    vars scale_gly and scale_gly;
    vars atp and atp;
    vars adp and adp;
    vars amp and amp;
  enddef;
  def map between GlucoseMetabolism and v13_PFK2 for
    vars v13 and v;
    vars scale_gly and scale_gly;
    vars gamma and gamma;
    vars atp and atp;
    vars fru6p and fru6p;
  enddef;
  def map between GlucoseMetabolism and v14_FBP2 for
    vars v14 and v;
    vars scale_gly and scale_gly;
    vars gamma and gamma;
    vars fru6p and fru6p;
    vars fru26bp and fru26bp;
  enddef;
  def map between GlucoseMetabolism and v15_PFK1 for
    vars v15 and v;
    vars scale_gly and scale_gly;
    vars fru6p and fru6p;
    vars fru26bp and fru26bp;
    vars atp and atp;
  enddef;
  def map between GlucoseMetabolism and v16_FBP1 for
    vars v16 and v;
    vars scale_gly and scale_gly;
    vars fru16bp and fru16bp;
    vars fru26bp and fru26bp;
  enddef;
  def map between GlucoseMetabolism and v17_ALD for
    vars v17 and v;
    vars scale_gly and scale_gly;
    vars fru16bp and fru16bp;
    vars grap and grap;
    vars dhap and dhap;
  enddef;
  def map between GlucoseMetabolism and v18_TPI for
    vars v18 and v;
    vars scale_gly and scale_gly;
    vars grap and grap;
    vars dhap and dhap;
  enddef;
  def map between GlucoseMetabolism and v19_GAPDH for
    vars v19 and v;
    vars scale_gly and scale_gly;
    vars nad and nad;
    vars grap and grap;
    vars p and p;
    vars bpg13 and bpg13;
    vars nadh and nadh;
  enddef;
  def map between GlucoseMetabolism and v20_PGK for
    vars v20 and v;
    vars scale_gly and scale_gly;
    vars atp and atp;
    vars adp and adp;
    vars bpg13 and bpg13;
    vars pg3 and pg3;
  enddef;
  def map between GlucoseMetabolism and v21_PGM for
    vars v21 and v;
    vars scale_gly and scale_gly;
    vars pg3 and pg3;
    vars pg2 and pg2;
  enddef;
  def map between GlucoseMetabolism and v22_ENO for
    vars v22 and v;
    vars scale_gly and scale_gly;
    vars pep and pep;
    vars pg2 and pg2;
  enddef;
  def map between GlucoseMetabolism and v23_PK for
    vars v23 and v;
    vars scale_gly and scale_gly;
    vars gamma and gamma;
    vars pep and pep;
    vars fru16bp and fru16bp;
    vars adp and adp;
  enddef;
  def map between GlucoseMetabolism and v24_PEPCK for
    vars v24 and v;
    vars scale_gly and scale_gly;
    vars pep and pep;
    vars oaa and oaa;
    vars gtp and gtp;
    vars gdp and gdp;
    vars co2 and co2;
  enddef;
  def map between GlucoseMetabolism and v25_PEPCKM for
    vars v25 and v;
    vars scale_gly and scale_gly;
    vars pep_mito and pep_mito;
    vars oaa_mito and oaa_mito;
    vars gtp_mito and gtp_mito;
    vars gdp_mito and gdp_mito;
    vars co2_mito and co2_mito;
  enddef;
  def map between GlucoseMetabolism and v26_PC for
    vars v26 and v;
    vars scale_gly and scale_gly;
    vars pyr_mito and pyr_mito;
    vars atp_mito and atp_mito;
    vars co2_mito and co2_mito;
    vars acoa_mito and acoa_mito;
  enddef;
  def map between GlucoseMetabolism and v27_LDH for
    vars v27 and v;
    vars scale_gly and scale_gly;
    vars pyr and pyr;
    vars nadh and nadh;
    vars lac and lac;
    vars nad and nad;
  enddef;
  def map between GlucoseMetabolism and v28_LACT for
    vars v28 and v;
    vars scale_gly and scale_gly;
    vars lac and lac;
    vars lac_ext and lac_ext;
  enddef;
  def map between GlucoseMetabolism and v29_PYRT for
    vars v29 and v;
    vars scale_gly and scale_gly;
    vars pyr and pyr;
    vars pyr_mito and pyr_mito;
  enddef;
  def map between GlucoseMetabolism and v30_PEPT for
    vars v30 and v;
    vars scale_gly and scale_gly;
    vars pep and pep;
    vars pep_mito and pep_mito;
  enddef;
  def map between GlucoseMetabolism and v31_PDH for
    vars v31 and v;
    vars scale_gly and scale_gly;
    vars gamma and gamma;
    vars pyr_mito and pyr_mito;
    vars nad_mito and nad_mito;
    vars nadh_mito and nadh_mito;
    vars coa_mito and coa_mito;
    vars acoa_mito and acoa_mito;
  enddef;
  def map between GlucoseMetabolism and v32_CS for
    vars v32 and v;
    vars scale_gly and scale_gly;
    vars coa_mito and coa_mito;
    vars acoa_mito and acoa_mito;
    vars cit_mito and cit_mito;
    vars oaa_mito and oaa_mito;
  enddef;
  def map between GlucoseMetabolism and v33_NDKMG for
    vars v33 and v;
    vars scale_gly and scale_gly;
    vars atp_mito and atp_mito;
    vars adp_mito and adp_mito;
    vars gtp_mito and gtp_mito;
    vars gdp_mito and gdp_mito;
  enddef;
  def map between GlucoseMetabolism and v34_OAA_FLUX for
    vars v34 and v;
    vars scale_gly and scale_gly;
  enddef;
  def map between GlucoseMetabolism and v35_ACOA_FLUX for
    vars v35 and v;
    vars scale_gly and scale_gly;
  enddef;
  def map between GlucoseMetabolism and v36_CIT_FLUX for
    vars v36 and v;
    vars scale_gly and scale_gly;
  enddef;
  def import using "Koenig2012_Gamma.cellml" for
    comp Gamma using comp Gamma;
  enddef;

  def group as encapsulation for
    comp GlucoseMetabolism incl
      comp Gamma;
    endcomp;
  enddef;
enddef;
