<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 4/10/2013 at 2:36:29 at PM using:

COR (0.9.31.1409)
Copyright 2002-2013 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model name="MassActionBiIrrev" cmeta:id="MassActionBiIrrev" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
   <units name="mM">
      <unit units="mole" prefix="milli"/>
      <unit units="liter" exponent="-1"/>
   </units>
   <units name="per_second">
      <unit units="second" exponent="-1"/>
   </units>
   <units name="mM_per_second">
      <unit units="mM"/>
      <unit units="second" exponent="-1"/>
   </units>
   <units name="per_mM_per_second">
      <unit units="mM" exponent="-1"/>
      <unit units="second" exponent="-1"/>
   </units>
   <component name="Network">
      <variable name="t" units="second"/>
      <variable name="v1" units="mM_per_second" public_interface="in"/>
      <variable name="S1" units="mM" initial_value="2" public_interface="out"/>
      <variable name="S2" units="mM" initial_value="1" public_interface="out"/>
      <variable name="P" units="mM" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>S1</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v1</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>S2</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v1</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>P</ci>
            </apply>
            <ci>v1</ci>
         </apply>
      </math>
   </component>
   <component name="Reaction_1">
      <variable name="J" units="mM_per_second" public_interface="out" private_interface="in"/>
      <variable name="S1" units="mM" public_interface="in" private_interface="out"/>
      <variable name="S2" units="mM" public_interface="in" private_interface="out"/>
      <variable name="k_f" units="per_mM_per_second" private_interface="out"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>k_f</ci>
            <cn cellml:units="per_mM_per_second">10</cn>
         </apply>
      </math>
   </component>
   <component name="MassActionBiIrrev">
      <variable name="J" units="mM_per_second" public_interface="out"/>
      <variable name="S1" units="mM" public_interface="in"/>
      <variable name="S2" units="mM" public_interface="in"/>
      <variable name="k_f" units="per_mM_per_second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>J</ci>
            <apply>
               <times/>
               <ci>k_f</ci>
               <ci>S1</ci>
               <ci>S2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="Reaction_1">
         <component_ref component="MassActionBiIrrev"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_1="Network" component_2="Reaction_1"/>
      <map_variables variable_1="v1" variable_2="J"/>
      <map_variables variable_1="S1" variable_2="S1"/>
      <map_variables variable_1="S2" variable_2="S2"/>
   </connection>
   <connection>
      <map_components component_1="Reaction_1" component_2="MassActionBiIrrev"/>
      <map_variables variable_1="J" variable_2="J"/>
      <map_variables variable_1="S1" variable_2="S1"/>
      <map_variables variable_1="S2" variable_2="S2"/>
      <map_variables variable_1="k_f" variable_2="k_f"/>
   </connection>
</model>
