<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  keizer_model_1996.xml

CREATED :  18th May 2007

LAST MODIFIED : 18th May 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Keizer and Levine's
1996 model of ryanodine receptor adaptation and Cai2+-induced Cai2+ release-dependent Cai2+ oscillations.

CHANGES:  
 
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="keizer_model_1996" name="keizer_levine_1996_version01">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>RyR Adaptation and Ca2+ Oscillations</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
The ryanodine receptor (RyR) from cardiac cells and skeletal muscle undergoes a Ca<superscript>2+</superscript>-dependent process called adaptation.  Adaptation occurs during the slow, spontaneous decrease in the open probability of a channel after it has been rapidly activated by a pulse of cytosolic calcium ([Ca<superscript>2+</superscript>]<subscript>i</subscript>).  RyR activation occurs within milliseconds, whereas inactivation occurs on a timescale of a few seconds.  The RyR is said to have "adapted" during inactivation because a subsequent increase in [Ca<superscript>2+</superscript>]<subscript>i</subscript> produces a nearly identical rise in the open probability.
</para>

<para>
In their 1996 paper, Joel Keizer and Leslie Levine develop a simplified model that mimics the "adaptation" of the RyR, and they investigate its significance for Ca<superscript>2+</superscript>-induced Ca<superscript>2+</superscript> release and Ca<superscript>2+</superscript> oscillations in cardiac cells.  The mechanism used to mimic adaptation of the RyR is shown schematically in <xref linkend="fig_reaction_diagram"/> below.  States C1 and C2 are closed states and O1 and O2 are open states.  Transitions from C1 to O1 and from O1 to O2 are assumed to be Ca<superscript>2+</superscript>-dependent.  These steps correspond to the phenomenon of Ca<superscript>2+</superscript>-induced Ca<superscript>2+</superscript> release (CICR).  To analyse the mechanism in <xref linkend="fig_reaction_diagram"/>, Keizer and Levine translated the schematic diagram into kinetic equations.  In addition, they test these equations in a closed-cell kinetic model, and they find that RyR adaptation can cause Ca<superscript>2+</superscript> oscillations.  However, in an open-cell, CICR, not RyR adaptation, produces Ca<superscript>2+</superscript> oscillations.  
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
Ryanodine Receptor Adaptation and Ca<superscript>2+</superscript>-Induced Ca<superscript>2+</superscript> Release-Dependent Ca<superscript>2+</superscript> Oscillations, Joel Keizer and Leslie Levine, 1996, <emphasis>Biophysical Journal</emphasis>, 71, 3477-3487.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=8968617&amp;dopt=Abstract">PubMed ID: 8968617</ulink>
</para>

<para>
The raw CellML description of the kinetic model of cardiac RyR adaptation can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>.
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>Schematic diagram of the RyR model</title>
    </objectinfo>
    <imagedata fileref="keizer_1996.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of transitions among the four states of the RyR used to describe adaptation.  States C1 and C2 are closed states and O1 and O2 represent open states, assumed to have the same single-channel conductance.  The <emphasis>k</emphasis> are rate constants: only steps <emphasis>a</emphasis> and <emphasis>b</emphasis> are Ca<superscript>2+</superscript> dependent.</caption>
</informalfigure>

</sect1>
</article>
</documentation>

    <!--
      The following RDF block contains metadata that applies to this document
      as a whole, as indicated by the empty about attribute on the 
      <rdf:Description> element.
    -->


  
  <!--
    Below, we define some additional units for association with variables and
    constants within the model. The identifiers are fairly self-explanatory.
  -->
  
  <units name="micromolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="micromolar_3">
    <unit units="micromolar" exponent="3"/>
  </units>
  
  <units name="micromolar_4">
    <unit units="micromolar" exponent="4"/>
  </units>
  
  <units name="flux">
    <unit units="micromolar"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit units="micromolar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="forth_order_rate_constant">
    <unit units="micromolar" exponent="-3"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="fifth_order_rate_constant">
    <unit units="micromolar" exponent="-4"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <!--
    The "environment" component is used to declare variables that are used by
    all or most of the other components, in this case just "time".
  -->
  
  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>
  
  
  <component cmeta:id="P_C1" name="P_C1">
     
    <variable units="dimensionless" public_interface="out" name="P_C1"/>

    <variable units="dimensionless" public_interface="in" name="n"/> 
    <variable units="second" public_interface="in" name="time"/>
    <variable units="micromolar" public_interface="in" name="Cai"/>  
    <variable units="fifth_order_rate_constant" public_interface="in" name="ka"/>
    <variable units="first_order_rate_constant" public_interface="in" name="ka_"/>
    <variable units="dimensionless" public_interface="in" name="P_O1"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>P_C1</ci> 
        </apply>
        <apply>
          <plus/> 
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>ka</ci>
              <apply>
                <power/>
                <ci>Cai</ci>
                <ci>n</ci>
              </apply>
              <ci>P_C1</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>ka_</ci> 
            <ci>P_O1</ci>
          </apply> 
        </apply>
      </apply> 
    </math> 
  </component>

  <component cmeta:id="P_O1" name="P_O1">
     
    <variable units="dimensionless" public_interface="out" name="P_O1"/>

    <variable units="dimensionless" public_interface="in" name="n"/>
    <variable units="dimensionless" public_interface="in" name="m"/>  
    <variable units="second" public_interface="in" name="time"/>
    <variable units="micromolar" public_interface="in" name="Cai"/>  
    <variable units="fifth_order_rate_constant" public_interface="in" name="ka"/>
    <variable units="first_order_rate_constant" public_interface="in" name="ka_"/>
    <variable units="forth_order_rate_constant" public_interface="in" name="kb"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kb_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kc"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kc_"/>
    <variable units="dimensionless" public_interface="in" name="P_C1"/>
    <variable units="dimensionless" public_interface="in" name="P_C2"/>
    <variable units="dimensionless" public_interface="in" name="P_O2"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>P_O1</ci> 
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>ka</ci>
            <apply>
              <power/>
              <ci>Cai</ci>
              <ci>n</ci>
            </apply>
            <ci>P_C1</ci>
          </apply> 
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci>ka_</ci> 
                <ci>P_O1</ci>
              </apply>
              <apply>
                <times/>
                <ci>kb</ci>
                <apply>
                  <power/>
                  <ci>Cai</ci>
                  <ci>m</ci>
                </apply>
                <ci>P_O1</ci>
              </apply>
            </apply>
          </apply> 
          <apply>
            <times/>
            <ci>kb_</ci>
            <ci>P_O2</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>kc</ci>
              <ci>P_O1</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>kc_</ci> 
            <ci>P_C2</ci>
          </apply> 
        </apply>
      </apply> 
    </math> 
  </component>

  <component cmeta:id="P_O2" name="P_O2">
     
    <variable units="dimensionless" public_interface="out" name="P_O2"/>

    <variable units="dimensionless" public_interface="in" name="m"/> 
    <variable units="second" public_interface="in" name="time"/>
    <variable units="micromolar" public_interface="in" name="Cai"/>  
    <variable units="forth_order_rate_constant" public_interface="in" name="kb"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kb_"/>
    <variable units="dimensionless" public_interface="in" name="P_O1"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>P_O2</ci> 
        </apply>
        <apply>
          <plus/> 
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>kb</ci>
              <apply>
                <power/>
                <ci>Cai</ci>
                <ci>m</ci>
              </apply>
              <ci>P_O1</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>kb_</ci> 
            <ci>P_O2</ci>
          </apply> 
        </apply>
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="P_C2" name="P_C2">
     
    <variable units="dimensionless" public_interface="out" name="P_C2"/>

    <variable units="second" public_interface="in" name="time"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kc"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kc_"/>
    <variable units="dimensionless" public_interface="in" name="P_O1"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>P_C2</ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>kc</ci>
            <ci>P_O1</ci>
          </apply>          
          <apply>
            <times/>
            <ci>kc_</ci> 
            <ci>P_C2</ci>
          </apply> 
        </apply>
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="P_O_slow" name="P_O_slow">
     
    <variable units="micromolar" public_interface="out" name="P_O_slow"/>
    
    <variable units="micromolar" name="w"/>
    <variable units="micromolar" name="w_init"/>
    <variable units="dimensionless" name="w_infinity_Cai"/>
    <variable units="dimensionless" name="tau_Cai"/>
    <variable units="micromolar_4" name="Ka"/>
    <variable units="micromolar_3" name="Kb"/>
    <variable units="dimensionless" name="Kc"/> 
    
    <variable units="fifth_order_rate_constant" public_interface="in" name="ka"/>
    <variable units="forth_order_rate_constant" public_interface="in" name="kb"/>
    <variable units="first_order_rate_constant" public_interface="in" name="ka_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kb_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kc"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kc_"/>
    <variable units="micromolar" public_interface="in" name="Cai"/>
    <variable units="micromolar" public_interface="in" name="P_C2"/>
    <variable units="second" public_interface="in" name="time"/> 
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="P_O_slow_calculation">
        <eq/>
        <ci> P_O_slow </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> w </ci>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <ci> Cai </ci>
                  <ci> Kb </ci>
                </apply>
                <cn cellml:units="dimensionless"> 3.0 </cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn> 
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> Ka </ci>
                <ci> Cai </ci>
              </apply>
              <cn cellml:units="dimensionless"> 4.0 </cn>
            </apply>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> Cai </ci>
                <ci> Kb </ci>
              </apply>
              <cn cellml:units="dimensionless"> 3.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply> 
      
      <apply id="w_init_calculation">
        <eq/>
        <ci> w_init </ci>
        <apply>
          <minus/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <ci> P_C2 </ci>
        </apply>
      </apply>
      
      <apply id="w_infinity_Cai_calculation">
        <eq/>
        <ci> w_infinity_Cai </ci>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> Ka </ci>
                <ci> Cai </ci>
              </apply>
              <cn cellml:units="dimensionless"> 4.0 </cn>
            </apply>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> Cai </ci>
                <ci> Kb </ci>
              </apply>
              <cn cellml:units="dimensionless"> 3.0 </cn>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <divide/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> Kc </ci>
            </apply> 
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> Ka </ci>
                <ci> Cai </ci>
              </apply>
              <cn cellml:units="dimensionless"> 4.0 </cn>
            </apply>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> Cai </ci>
                <ci> Kb </ci>
              </apply>
              <cn cellml:units="dimensionless"> 3.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="tau_Cai_calculation">
        <eq/>
        <ci> tau_Cai </ci>
        <apply>
          <divide/>
          <ci> w_infinity_Cai </ci>
          <ci> kc_ </ci> 
        </apply>
      </apply> 
      
      <apply id="Ka_calculation">
        <eq/>
        <ci> Ka </ci>
        <apply>
          <divide/>
          <ci> ka_ </ci>
          <ci> ka </ci> 
        </apply>
      </apply>
      
      <apply id="Kb_calculation">
        <eq/>
        <ci> Kb </ci>
        <apply>
          <divide/>
          <ci> kb_ </ci>
          <ci> kb </ci> 
        </apply>
      </apply> 
      
      <apply id="Kc_calculation">
        <eq/>
        <ci> Kc </ci>
        <apply>
          <divide/>
          <ci> kc_ </ci>
          <ci> kc </ci> 
        </apply>
      </apply> 
      
      <apply id="w_diff_eq">
        <eq/>
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> w </ci> 
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <apply>
              <minus/>
              <ci> w </ci>
              <apply>
                <times/>
                <ci> w_infinity_Cai </ci>
                <ci> Cai </ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> tau_Cai </ci>
            <ci> Cai </ci>
          </apply>
        </apply>
      </apply>
    </math> 
  </component>
  
  <component cmeta:id="Cai" name="Cai">
     
    <variable units="micromolar" public_interface="out" name="Cai"/>
    
    <variable units="dimensionless" name="fi" initial_value="0.01"/>
    <variable units="first_order_rate_constant" name="v1" initial_value="40.0"/>
    <variable units="first_order_rate_constant" name="v2" initial_value="0.5"/>
    <variable units="second_order_rate_constant" name="v3" initial_value="1000.0"/>
    <variable units="micromolar" name="K3" initial_value="0.30"/>
    <variable units="micromolar" name="Cas"/>
    <variable units="micromolar" name="Co" initial_value="10.0"/>
    <variable units="dimensionless" name="c1" initial_value="0.15"/>
    
    <variable units="micromolar" public_interface="in" name="P_O_slow"/>
    <variable units="second" public_interface="in" name="time"/> 
   
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply id="dCai_dt">
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci>Cai</ci> 
        </apply>
        <apply>
          <times/>
          <ci> fi </ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> v1 </ci>
                  <ci> P_O_slow </ci>
                </apply>
                <ci> v2 </ci>
              </apply>
              <apply>
                <minus/>
                <ci> Cas </ci>
                <ci> Cai </ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci> v3 </ci>
              <apply>
                <divide/>
                <apply>
                  <power/>
                  <ci> Cai </ci>
                  <cn cellml:units="dimensionless"> 2.0 </cn>
                </apply>
                <apply>
                  <plus/>
                  <apply>
                    <power/>
                    <ci> Cai </ci>
                    <cn cellml:units="dimensionless"> 2.0 </cn>
                  </apply>
                  <apply>
                    <power/>
                    <ci> K3 </ci>
                    <cn cellml:units="dimensionless"> 2.0 </cn>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply> 
      </apply>
      
      <apply id="Cas_calculation">
        <eq/>
        <ci> Cas </ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> Co </ci>
            <ci> Cai </ci>
          </apply>
          <ci> c1 </ci>
        </apply>
      </apply>  
    </math> 
  </component>
  
  <component name="constants">
    <variable units="fifth_order_rate_constant" public_interface="out" name="ka" initial_value="1500.0"/>
    <variable units="forth_order_rate_constant" public_interface="out" name="kb" initial_value="1500.0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="ka_" initial_value="28.8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kb_" initial_value="385.9"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kc" initial_value="1.75"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kc_" initial_value="0.1"/>
    <variable units="micromolar" public_interface="out" name="n" initial_value="4"/>
    <variable units="micromolar" public_interface="out" name="m" initial_value="3"/>
  </component>  
  
  <connection>
    <map_components component_2="environment" component_1="P_C1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="P_O1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="P_O2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="P_O_slow"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="P_C2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Cai"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="constants" component_1="P_C1"/>
    <map_variables variable_2="ka" variable_1="ka"/>
    <map_variables variable_2="ka_" variable_1="ka_"/>
    <map_variables variable_2="n" variable_1="n"/>
  </connection>

  <connection>
    <map_components component_2="P_O1" component_1="P_C1"/>
    <map_variables variable_2="P_O1" variable_1="P_O1"/>
    <map_variables variable_2="P_C1" variable_1="P_C1"/>
  </connection>

  <connection>
    <map_components component_2="Cai" component_1="P_C1"/>
    <map_variables variable_2="Cai" variable_1="Cai"/>
  </connection>
  
  <connection>
    <map_components component_2="constants" component_1="P_O1"/>
    <map_variables variable_2="ka" variable_1="ka"/>
    <map_variables variable_2="ka_" variable_1="ka_"/>
    <map_variables variable_2="kb" variable_1="kb"/>
    <map_variables variable_2="kb_" variable_1="kb_"/>
    <map_variables variable_2="kc" variable_1="kc"/>
    <map_variables variable_2="kc_" variable_1="kc_"/>
    <map_variables variable_2="n" variable_1="n"/>
    <map_variables variable_2="m" variable_1="m"/>
  </connection>

  <connection>
    <map_components component_2="P_O1" component_1="P_C2"/>
    <map_variables variable_2="P_O1" variable_1="P_O1"/>
    <map_variables variable_2="P_C2" variable_1="P_C2"/>
  </connection>

  <connection>
    <map_components component_2="Cai" component_1="P_O1"/>
    <map_variables variable_2="Cai" variable_1="Cai"/>
  </connection>
  
  <connection>
    <map_components component_2="constants" component_1="P_O2"/>
    <map_variables variable_2="kb" variable_1="kb"/>
    <map_variables variable_2="kb_" variable_1="kb_"/>
    <map_variables variable_2="m" variable_1="m"/>
  </connection>

  <connection>
    <map_components component_2="P_O1" component_1="P_O2"/>
    <map_variables variable_2="P_O1" variable_1="P_O1"/>
    <map_variables variable_2="P_O2" variable_1="P_O2"/>
  </connection>

  <connection>
    <map_components component_2="Cai" component_1="P_O2"/>
    <map_variables variable_2="Cai" variable_1="Cai"/>
  </connection>
  
  <connection>
    <map_components component_2="constants" component_1="P_C2"/>
    <map_variables variable_2="kc" variable_1="kc"/>
    <map_variables variable_2="kc_" variable_1="kc_"/>
  </connection>

  <connection>
    <map_components component_2="constants" component_1="P_O_slow"/>
    <map_variables variable_2="ka" variable_1="ka"/>
    <map_variables variable_2="ka_" variable_1="ka_"/>
    <map_variables variable_2="kb" variable_1="kb"/>
    <map_variables variable_2="kb_" variable_1="kb_"/>
    <map_variables variable_2="kc" variable_1="kc"/>
    <map_variables variable_2="kc_" variable_1="kc_"/>
  </connection>

  <connection>
    <map_components component_2="Cai" component_1="P_O_slow"/>
    <map_variables variable_2="Cai" variable_1="Cai"/>
    <map_variables variable_2="P_O_slow" variable_1="P_O_slow"/>
  </connection>

  <connection>
    <map_components component_2="P_C2" component_1="P_O_slow"/>
    <map_variables variable_2="P_C2" variable_1="P_C2"/>
  </connection>

<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#7c9b148e-ed9f-4a87-9dff-53ccad85198e">
    <rdf:li>calcium dynamics</rdf:li>
    <rdf:li>ryanodine receptor</rdf:li>
    <rdf:li>oscillator</rdf:li>
    <rdf:li>Cardiac Myocyte</rdf:li>
    <rdf:li>electrophysiology</rdf:li>
    <rdf:li>cardiac</rdf:li>
    <rdf:li>ryanodine receptors</rdf:li>
    <rdf:li>cicr</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#f92b8ad0-4a12-4226-9994-67dbfa6c454e">
    <rdf:li rdf:resource="rdf:#04513b89-1af7-4da7-8884-ec2a51499eef"/>
    <rdf:li rdf:resource="rdf:#da4dbea9-81bb-4d9e-bc0e-0e88f0797bb7"/>
  </rdf:Seq>
  <rdf:Description rdf:about="/O_slow">
    <dcterms:alternative>
          Open state on a slow time scale
        </dcterms:alternative>
    <dc:title>P_O_slow</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fc65dd61-84c3-4c22-8a55-96c415143849">
    <dcterms:modified rdf:resource="rdf:#8a4d8d2f-ef42-4f25-9531-94f56be400c8"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics.  This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.&#13;
&#13;
The model runs in the PCEnv simulator but gives NaNs. </rdf:value>
    <cmeta:modifier rdf:resource="rdf:#09ceb32b-2f01-428e-a562-6c0bf2ed4ab4"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#a8d621cf-b65c-48c7-a935-6f90056f0b79"/>
    <dcterms:created rdf:resource="rdf:#4d2bff11-5b03-4771-aac4-28e77e821640"/>
    <dc:creator rdf:resource="rdf:#f2ea0d58-f986-4d50-9239-1f50334c862d"/>
    <cmeta:modification rdf:resource="rdf:#fc65dd61-84c3-4c22-8a55-96c415143849"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#479de885-901c-4197-b56d-e815acc95823">
    <vCard:Given>Leslie</vCard:Given>
    <vCard:Family>Levine</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a8d621cf-b65c-48c7-a935-6f90056f0b79">
    <dc:creator rdf:resource="rdf:#195fcc82-f0ed-47a2-af62-dcbfef65cb49"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#da4dbea9-81bb-4d9e-bc0e-0e88f0797bb7">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#479de885-901c-4197-b56d-e815acc95823"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7a0bfaaa-0770-4d84-92e4-fd4c373be683">
    <dcterms:W3CDTF>1996-12-01</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#64ff61b2-1ca2-42dc-acd0-0a3aa8e41732">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#63db43d4-8f44-43f9-96fd-fc56c5f78ea3">
    <bqs:Pubmed_id>8968617</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#7609c86a-2091-4bef-b8a2-1f23e16a414d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e16911fc-e75e-4939-938f-85e6b5d1fe0b">
    <dc:title>Biophysical Journal</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#keizer_model_1996">
    <dc:title>
        Keizer and Levine's 1996 model of a gating scheme for ryanodine 
        receptors.
      </dc:title>
    <cmeta:bio_entity>Cardiac Myocyte</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#8ab1826e-034b-4ddb-8c7d-4a601a818731"/>
    <bqs:reference rdf:resource="rdf:#5fb7f618-b462-4e08-b6ef-a469dfda5318"/>
    <bqs:reference rdf:resource="rdf:#63db43d4-8f44-43f9-96fd-fc56c5f78ea3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7609c86a-2091-4bef-b8a2-1f23e16a414d">
    <dc:creator rdf:resource="rdf:#f92b8ad0-4a12-4226-9994-67dbfa6c454e"/>
    <dc:title>Ryanodine Receptor Adaptation and Ca2+-Induced Ca2+ &#13;
            Release-Dependent Ca2+ Oscillations</dc:title>
    <bqs:volume>71</bqs:volume>
    <bqs:first_page>3477</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#e16911fc-e75e-4939-938f-85e6b5d1fe0b"/>
    <dcterms:issued rdf:resource="rdf:#7a0bfaaa-0770-4d84-92e4-fd4c373be683"/>
    <bqs:last_page>3487</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="/P_O2">
    <dcterms:alternative>Open state 2</dcterms:alternative>
    <dc:title>P_O2</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="/P_O1">
    <dcterms:alternative>Open state 1</dcterms:alternative>
    <dc:title>P_O1</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#22a7b94f-50b8-4b8f-87d6-92a070439d0c">
    <vCard:Given>Joel</vCard:Given>
    <vCard:Family>Keizer</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="/Cai">
    <dcterms:alternative>
          Intracellular calcium concentration in a closed cell
        </dcterms:alternative>
    <dc:title>Cai</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#09ceb32b-2f01-428e-a562-6c0bf2ed4ab4">
    <vCard:N rdf:resource="rdf:#6f2f561a-e4b3-4ba4-85bc-e916457d14af"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#04513b89-1af7-4da7-8884-ec2a51499eef">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#22a7b94f-50b8-4b8f-87d6-92a070439d0c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5fb7f618-b462-4e08-b6ef-a469dfda5318">
    <dc:subject rdf:resource="rdf:#482ff6ca-7779-4582-b3ba-e747392d4e9f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6f2f561a-e4b3-4ba4-85bc-e916457d14af">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8ab1826e-034b-4ddb-8c7d-4a601a818731">
    <dc:creator rdf:resource="rdf:#58957513-8dd3-4db4-b0a4-67b8fa33a2c1"/>
    <rdf:value>This is the CellML description of Keizer and Levine's 1996 model of a &#13;
          gating scheme for ryanodine receptors in cardiac muscle.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="/P_C2">
    <dcterms:alternative>Closed state 2</dcterms:alternative>
    <dc:title>P_C2</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8a4d8d2f-ef42-4f25-9531-94f56be400c8">
    <dcterms:W3CDTF>2007-06-05T09:35:57+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#58957513-8dd3-4db4-b0a4-67b8fa33a2c1">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="/P_C1">
    <dcterms:alternative>Closed state 1</dcterms:alternative>
    <dc:title>P_C1</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f2ea0d58-f986-4d50-9239-1f50334c862d">
    <vCard:ORG rdf:resource="rdf:#2dff1af3-376a-446c-9bd7-e0ad62d2560c"/>
    <vCard:EMAIL rdf:resource="rdf:#64ff61b2-1ca2-42dc-acd0-0a3aa8e41732"/>
    <vCard:N rdf:resource="rdf:#d63716c2-15ed-4f63-b227-f7db6076a098"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d63716c2-15ed-4f63-b227-f7db6076a098">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4d2bff11-5b03-4771-aac4-28e77e821640">
    <dcterms:W3CDTF>2007-05-18</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2dff1af3-376a-446c-9bd7-e0ad62d2560c">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#482ff6ca-7779-4582-b3ba-e747392d4e9f">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#7c9b148e-ed9f-4a87-9dff-53ccad85198e"/>
  </rdf:Description>
</rdf:RDF>
</model>
