// simulation: endingValue 300; algorithm bdf15; maximumStepSize .1; startingValue 0; releps 1E-4; abseps 1E-7
def model CaOscillations as

  def comp Environment as
    var time: second {pub: out};
  enddef;

  def comp Parameters as
    var F: sec_A_per_mol {init: 96487, pub: out};
    var vol_cyt: cubic_Meter {init: 5E-16, pub: out};
    var vol_md: cubic_Meter {init: 3E-18, pub: out};
    var vol_SR: cubic_Meter {init: 7E-17, pub: out};
    var vol_cyt_Ca: cubic_Meter {init: 3.5E-16, pub: out};
    var K_mr: Molar {init: 1.7, pub: out};
    var n_H: dimensionless {init: 2, pub: out};
    var v_RyR: per_sec {init: 12, pub: out};
    var K_a: Molar {init: 3.7224E-4, pub: out};
    var K_b: Molar {init: 6.3601E-4, pub: out};
    var K_c: Molar {init: 5.71E-5, pub: out};
    var K_c_rate: per_sec {init: 0.1, pub: out};
    var v_IP3R: per_sec {init: 20, pub: out};
    var v_IP3: per_sec {init: 1.85, pub: out};
    var conc_IP3_ref: Molar {init: 2.4E-4, pub: out};
    var alpha_4: dimensionless {init: 0.5, pub: out};
    var k4: Molar {init: 1.1E-3, pub: out};
    var I_r: per_sec {init: 1, pub: out};
    var d1: Molar {init: 1.3E-4, pub: out};
    var a4: per_M_sec {init: 2E2, pub: out};
    var d4: Molar {init: 1.445E-4, pub: out};
    var a5: per_M_sec {init: 2E4, pub: out};
    var d5: Molar {init: 8.234E-5, pub: out};
    var G_CaSOC_max: siemens2 {init: 7.5E-11, pub: out};
    var K_SOC: Molar {init: 0.1, pub: out};
    var delta_CT: volt {init: 8.78E-2, pub: out};
    var J_NaCl_max: mol_per_sec {init: 6E-17, pub: out};
    var J_KCl_max: mol_per_sec {init: 3.5E-18, pub: out};
    var J_NKCC_max: mol_per_sec {init: 6E-17, pub: out};
    var K_NKCC_Na: Molar {init: 46, pub: out};
    var K_NKCC_K: Molar {init: 4.0, pub: out};
    var K_NKCC_Cl1: Molar {init: 78, pub: out};
    var K_NKCC_Cl2: Molar {init: 78, pub: out};
    var k_on: per_M_sec {init: 3.0E3, pub: out};
    var k_off: per_sec {init: 50, pub: out};
    var alpha1: per_sec {init: 10, pub: out};
    var alpha2: per_sec {init: 30, pub: out};
    var alpha3: per_sec {init: 300, pub: out};
    var G_ClCa_max: siemens2 {init: 1.2E-8, pub: out};
    var G_K_b: siemens2 {init: 1E-11, pub: out};
    var G_Na_b: siemens2 {init: 1E-11, pub: out};
    var G_Ca_b: siemens2 {init: 1.2E-11, pub: out};
    var G_Cl_b: siemens2 {init: 1E-11, pub: out};
    var G_Kir_max: siemens2 {init: 3E-10, pub: out};
    var conc_K_ref: Molar {init: 5.4, pub: out};
    var G_Kv_max: siemens2 {init: 9.8325E-9, pub: out};
    var n_ATP: dimensionless {init: 0.463, pub: out};
    var G_KATP_max: siemens2 {init: 1.036E-9, pub: out};
    var G_KCa_max: siemens2 {init: 5.00E-10, pub: out};
    var Tau_PF: second {init: 5E-4, pub: out};
    var Tau_PS: second {init: 1.15E-2, pub: out};
    var K_m_K: Molar {init: 1.5, pub: out};
    var K_m_Na_alpha1: Molar {init: 12, pub: out};
    var K_m_Na_alpha2: Molar {init: 22, pub: out};
    var I_NaCa_max: ampere {init: 1.7097E-10, pub: out};
    var K_m_Cai: Molar {init: 3.59E-3, pub: out};
    var K_m_Cao: Molar {init: 1.3, pub: out};
    var K_m_Nai: Molar {init: 12.29, pub: out};
    var K_m_Nao: Molar {init: 87.5, pub: out};
    var k_sat: dimensionless {init: 0.27, pub: out};
    var gamma: dimensionless {init: 0.35, pub: out};
    var K_mCa_act: Molar {init: 1.25E-4, pub: out};
    var G_VONa_max: siemens2 {init: 2.860E-9, pub: out};
    var Tau_m: second {init: 0.0001, pub: out};
    var Tau_h: second {init: 0.001, pub: out};
    var K_m_CaP: Molar {init: 1.7E-4, pub: out};
    var G_CaL_max: siemens2 {init: 1.4151E-9, pub: out};
    var conc_Bf_tot: Molar {init: 4E-1, pub: out};
    var k_Bf_on: per_M_sec {init: 100E3, pub: out};
    var k_Bf_off: per_sec {init: 300, pub: out};
    var conc_Calseq_SR_tot: Molar {init: 1.4E-1, pub: out};
    var k_Calseq_on: per_M_sec {init: 1E5, pub: out};
    var k_Calseq_off: per_sec {init: 8E4, pub: out};
    D_K = D_Ca*1.96{dimensionless}/0.79{dimensionless};
    D_Na = D_Ca*1.33{dimensionless}/0.79{dimensionless};
    var f_cyt: dimensionless {init: 0.8580, pub: out};
    var f_md: dimensionless {init: 0.1420, pub: out};
    var R: J_per_mol_K {init: 8.3144621, pub: out};
    var T: kelvin {init: 298, pub: out};
    var Area: sq_meter {init: 1.21E-9, pub: out};
    var L: meter {init: 5E-7, pub: out};
    var hcon: dimensionless {init: 0.001, pub: out};
    var D_Ca: sq_m_per_sec {init: 3E-10, pub: out};
    var D_K: sq_m_per_sec {pub: out};
    var D_Na: sq_m_per_sec {pub: out};
    var D_Cl: sq_m_per_sec {init: 3E-10, pub: out};
  enddef;
  def unit per_sec as
    unit second {expo: -1};
  enddef;
  def unit per_M_sec as
    unit Molar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m_per_sec as
    unit meter;
    unit second {expo: -1};
  enddef;

  def comp Potassium_Conc_cyt as
    var conc_K_cyt: Molar {init: 140.55, pub: out};
    var I_K_cyt_b: ampere {pub: in};
    var I_K_cyt_ir: ampere {pub: in};
    var I_K_cyt_ATP: ampere {pub: in};
    var I_K_cyt_v: ampere {pub: in};
    var I_K_cyt_Ca: ampere {pub: in};
    var I_NaK_cyt_alpha1: ampere {pub: in};
    var J_cyt_KCl: mol_per_sec {pub: in};
    var J_cyt_NKCC: mol_per_sec {pub: in};
    var J_Kdiff: mol_per_sec {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_cyt: cubic_Meter {pub: in};
    ode(conc_K_cyt, time) = (-(I_K_cyt_b+I_K_cyt_ir+I_K_cyt_ATP+I_K_cyt_v+I_K_cyt_Ca-2{dimensionless}*I_NaK_cyt_alpha1)+F*(J_cyt_KCl+J_cyt_NKCC+J_Kdiff))/(F*vol_cyt);
    var time: second {pub: in};
  enddef;
  def unit sec_A_per_mol as
    unit mole {expo: -1};
    unit second;
    unit ampere;
  enddef;
  def map between Parameters and Potassium_Conc_cyt for
    vars F and F;
    vars vol_cyt and vol_cyt;
  enddef;
  def map between Environment and Potassium_Conc_cyt for
    vars time and time;
  enddef;

  def comp Potassium_Conc_md as
    var conc_K_md: Molar {init: 131.37, pub: out};
    var I_K_md_b: ampere {pub: in};
    var I_K_md_ir: ampere {pub: in};
    var I_K_md_ATP: ampere {pub: in};
    var I_K_md_v: ampere {pub: in};
    var I_K_md_Ca: ampere {pub: in};
    var I_NaK_md_alpha2: ampere {pub: in};
    var J_md_KCl: mol_per_sec {pub: in};
    var J_md_NKCC: mol_per_sec {pub: in};
    var J_Kdiff: mol_per_sec {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_md: cubic_Meter {pub: in};
    ode(conc_K_md, time) = (-(I_K_md_b+I_K_md_ir+I_K_md_ATP+I_K_md_v+I_K_md_Ca-2{dimensionless}*I_NaK_md_alpha2)+F*(J_md_KCl+J_md_NKCC-J_Kdiff))/(F*vol_md);
    var time: second {pub: in};
  enddef;
  def map between Parameters and Potassium_Conc_md for
    vars F and F;
    vars vol_md and vol_md;
  enddef;
  def map between Environment and Potassium_Conc_md for
    vars time and time;
  enddef;

  def comp Sodium_Conc_cyt as
    var conc_Na_cyt: Molar {init: 9.1964, pub: out};
    var I_Na_cyt_b: ampere {pub: in};
    var I_VONa_cyt: ampere {pub: in};
    var I_Na_cyt_SOC: ampere {pub: in};
    var I_NaK_cyt_alpha1: ampere {pub: in};
    var J_cyt_NaCl: mol_per_sec {pub: in};
    var J_cyt_NKCC: mol_per_sec {pub: in};
    var J_Nadiff: mol_per_sec {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_cyt: cubic_Meter {pub: in};
    ode(conc_Na_cyt, time) = (-(I_Na_cyt_b+3{dimensionless}*I_NaK_cyt_alpha1+I_VONa_cyt+I_Na_cyt_SOC)+F*(J_cyt_NaCl+J_cyt_NKCC+J_Nadiff))/(F*vol_cyt);
    var time: second {pub: in};
  enddef;
  def map between Parameters and Sodium_Conc_cyt for
    vars F and F;
    vars vol_cyt and vol_cyt;
  enddef;
  def map between Environment and Sodium_Conc_cyt for
    vars time and time;
  enddef;

  def comp Sodium_Conc_md as
    var conc_Na_md: Molar {init: 20.742, pub: out};
    var I_Na_md_b: ampere {pub: in};
    var I_VONa_md: ampere {pub: in};
    var I_Na_md_SOC: ampere {pub: in};
    var I_NaK_md_alpha2: ampere {pub: in};
    var J_md_NaCl: mol_per_sec {pub: in};
    var J_md_NKCC: mol_per_sec {pub: in};
    var J_Nadiff: mol_per_sec {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_md: cubic_Meter {pub: in};
    ode(conc_Na_md, time) = (-(I_Na_md_b+3{dimensionless}*I_NaK_md_alpha2+I_VONa_md+I_Na_md_SOC+3{dimensionless}*I_NaCa_md)+F*(J_md_NaCl+J_md_NKCC-J_Nadiff))/(F*vol_md);
    var time: second {pub: in};
    var I_NaCa_md: ampere {pub: in};
  enddef;

  def comp Chloride_Conc_cyt as
    var conc_Cl_cyt: Molar {init: 23.257, pub: out};
    var I_Cl_cyt_b: ampere {pub: in};
    var I_Cl_cyt_Ca: ampere {pub: in};
    var J_cyt_NaCl: mol_per_sec {pub: in};
    var J_cyt_KCl: mol_per_sec {pub: in};
    var J_Cldiff: mol_per_sec {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_cyt: cubic_Meter {pub: in};
    ode(conc_Cl_cyt, time) = (I_Cl_cyt_b+I_Cl_cyt_Ca+F*J_cyt_NaCl+F*(J_cyt_KCl+2{dimensionless}*J_cyt_NKCC+J_Cldiff))/(F*vol_cyt);
    var time: second {pub: in};
    var J_cyt_NKCC: mol_per_sec {pub: in};
  enddef;

  def comp Chloride_Conc_md as
    var conc_Cl_md: Molar {init: 16.737, pub: out};
    var I_Cl_md_b: ampere {pub: in};
    var I_Cl_md_Ca: ampere {pub: in};
    var J_md_NaCl: mol_per_sec {pub: in};
    var J_md_KCl: mol_per_sec {pub: in};
    var J_Cldiff: mol_per_sec {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_md: cubic_Meter {pub: in};
    ode(conc_Cl_md, time) = (I_Cl_md_b+I_Cl_md_Ca+F*J_md_NaCl+F*(J_md_KCl+2{dimensionless}*J_md_NKCC-J_Cldiff))/(F*vol_md);
    var time: second {pub: in};
    var J_md_NKCC: mol_per_sec {pub: in};
  enddef;
  def map between Environment and Chloride_Conc_cyt for
    vars time and time;
  enddef;
  def map between Parameters and Chloride_Conc_cyt for
    vars F and F;
    vars vol_cyt and vol_cyt;
  enddef;
  def map between Environment and Chloride_Conc_md for
    vars time and time;
  enddef;
  def map between Parameters and Chloride_Conc_md for
    vars F and F;
    vars vol_md and vol_md;
  enddef;

  def comp Calcium_Conc_cyt as
    var conc_Ca_cyt: Molar {init: 1.0533E-4, pub: out};
    var I_Ca_cyt_b: ampere {pub: in};
    var I_Ca_cyt_P: ampere {pub: in};
    var I_Ca_cyt_SOC: ampere {pub: in};
    var I_Ca_cyt_L: ampere {pub: in};
    var I_cyt_SERCa_IP3R: ampere {pub: in};
    var I_cyt_RyR: ampere {pub: in};
    var J_Cadiff: mol_per_sec {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_cyt_Ca: cubic_Meter {pub: in};
    ode(conc_Ca_cyt, time) = (-(I_Ca_cyt_b+I_Ca_cyt_P+I_Ca_cyt_SOC+I_Ca_cyt_L+I_cyt_SERCa_IP3R+I_cyt_SERCa_RyR-I_cyt_RyR-I_cyt_IP3R)+2{dimensionless}*F*J_Cadiff)/(2{dimensionless}*F*vol_cyt_Ca)-2{dimensionless}*(ode(conc_CaMN__, time)+ode(conc_CaM_C_, time)+ode(conc_CaM_CM, time))-ode(conc_BfCa_cyt, time);
    var time: second {pub: in};
    var I_cyt_IP3R: ampere {pub: in};
    var conc_CaMN__: Molar {pub: in};
    var conc_BfCa_cyt: Molar {pub: in};
    var I_cyt_SERCa_RyR: ampere {pub: in};
    var conc_CaM_C_: Molar {pub: in};
    var conc_CaM_CM: Molar {pub: in};
    var conc_CaMNCM: Molar {pub: in};
    var conc_CaM___: Molar {pub: in};
  enddef;
  def unit mol_per_sec as
    unit mole;
    unit second {expo: -1};
  enddef;

  def comp Bf_Kinetics as
    var conc_BfCa_cyt: Molar {init: 1.3568E-2, pub: out};
    var time: second {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    ode(conc_BfCa_cyt, time) = k_Bf_on*conc_Ca_cyt*(conc_Bf_tot-conc_BfCa_cyt)-k_Bf_off*conc_BfCa_cyt;
    ode(conc_BfCa_md, time) = k_Bf_on*conc_Ca_md*(conc_Bf_tot-conc_BfCa_md)-k_Bf_off*conc_BfCa_md;
    var conc_Bf_tot: Molar {pub: in};
    var k_Bf_on: per_M_sec {pub: in};
    var k_Bf_off: per_sec {pub: in};
    var conc_BfCa_md: Molar {init: 4.4109E-2, pub: out};
    var conc_Ca_md: Molar {pub: in};
  enddef;
  def map between Environment and Bf_Kinetics for
    vars time and time;
  enddef;
  def map between Parameters and Bf_Kinetics for
    vars conc_Bf_tot and conc_Bf_tot;
    vars k_Bf_on and k_Bf_on;
    vars k_Bf_off and k_Bf_off;
  enddef;
  def map between Bf_Kinetics and Calcium_Conc_cyt for
    vars conc_BfCa_cyt and conc_BfCa_cyt;
    vars conc_Ca_cyt and conc_Ca_cyt;
  enddef;

  def comp Calcium_Conc_md as
    var conc_Ca_md: Molar {init: 3.7182E-4, pub: out};
    var I_Ca_md_b: ampere {pub: in};
    var I_Ca_md_P: ampere {pub: in};
    var I_Ca_md_SOC: ampere {pub: in};
    var I_Ca_md_L: ampere {pub: in};
    var I_md_SERCa_RyR: ampere {pub: in};
    var I_md_RyR: ampere {pub: in};
    var J_Cadiff: mol_per_sec {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_md: cubic_Meter {pub: in};
    var time: second {pub: in};
    var I_md_IP3R: ampere {pub: in};
    var conc_BfCa_md: Molar {pub: in};
    ode(conc_Ca_md, time) = (-(I_Ca_md_b+I_Ca_md_P+I_Ca_md_SOC+I_Ca_md_L-2{dimensionless}*I_NaCa_md+I_md_SERCa_RyR+I_md_SERCa_IP3R-I_md_RyR-I_md_IP3R)-2{dimensionless}*F*J_Cadiff)/(2{dimensionless}*F*vol_md)-2{dimensionless}*(ode(conc_CaMN__, time)+ode(conc_CaM_C_, time)+ode(conc_CaM_CM, time))-ode(conc_BfCa_md, time);
    var I_NaCa_md: ampere {pub: in};
    var I_md_SERCa_IP3R: ampere {pub: in};
    var conc_CaMN__: Molar {pub: in};
    var conc_CaM_C_: Molar {pub: in};
    var conc_CaM_CM: Molar {pub: in};
    var conc_CaMNCM: Molar {pub: in};
  enddef;
  def map between Environment and Calcium_Conc_md for
    vars time and time;
  enddef;
  def map between Parameters and Calcium_Conc_md for
    vars F and F;
    vars vol_md and vol_md;
  enddef;
  def map between Bf_Kinetics and Calcium_Conc_md for
    vars conc_BfCa_md and conc_BfCa_md;
    vars conc_Ca_md and conc_Ca_md;
  enddef;

  def comp Calcium_Conc_SR as
    var conc_Ca_IP3R: Molar {init: 5.6334E-1, pub: out};
    var conc_Ca_RyR: Molar {init: 4.9091E-1, pub: out};
    var I_md_RyR: ampere {pub: in};
    var I_md_SERCa_IP3R: ampere {pub: in};
    var I_cyt_SERCa_IP3R: ampere {pub: in};
    var I_cyt_RyR: ampere {pub: in};
    var I_cyt_IP3R: ampere {pub: in};
    var I_md_IP3R: ampere {pub: in};
    var I_cyt_SERCa_RyR: ampere {pub: in};
    var I_md_SERCa_RyR: ampere {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_SR: cubic_Meter {pub: in};
    var conc_CalseqCa_IP3R: Molar {pub: in};
    var conc_CalseqCa_RyR: Molar {pub: in};
    var time: second {pub: in};
    ode(conc_Ca_IP3R, time) = (I_cyt_SERCa_IP3R-I_cyt_IP3R+I_md_SERCa_IP3R-I_md_IP3R)/(F*vol_SR)-ode(conc_CalseqCa_IP3R, time);
    ode(conc_Ca_RyR, time) = (I_cyt_SERCa_RyR-I_cyt_RyR+I_md_SERCa_RyR-I_md_RyR)/(F*vol_SR)-ode(conc_CalseqCa_RyR, time);
  enddef;
  def map between Environment and Calcium_Conc_SR for
    vars time and time;
  enddef;
  def map between Parameters and Calcium_Conc_SR for
    vars F and F;
    vars vol_SR and vol_SR;
  enddef;

  def comp Background_Currents as
    var I_K_cyt_b: ampere {pub: out};
    var I_K_md_b: ampere {pub: out};
    var I_Na_cyt_b: ampere {pub: out};
    var I_Na_md_b: ampere {pub: out};
    var I_Cl_cyt_b: ampere {pub: out};
    var I_Cl_md_b: ampere {pub: out};
    var I_Ca_cyt_b: ampere {pub: out};
    var I_Ca_md_b: ampere {pub: out};
    var G_K_b: siemens2 {pub: in};
    var G_Na_b: siemens2 {pub: in};
    var G_Cl_b: siemens2 {pub: in};
    var G_Ca_b: siemens2 {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var E_K_cyt: volt {pub: in};
    var E_K_md: volt {pub: in};
    var E_Na_cyt: volt {pub: in};
    var E_Na_md: volt {pub: in};
    var E_Cl_cyt: volt {pub: in};
    var E_Cl_md: volt {pub: in};
    var E_Ca_cyt: volt {pub: in};
    var E_Ca_md: volt {pub: in};
    I_K_cyt_b = G_K_b*f_cyt*(V_m_cyt-E_K_cyt);
    I_K_md_b = G_K_b*f_md*(V_m_md-E_K_md);
    I_Na_cyt_b = G_Na_b*f_cyt*(V_m_cyt-E_Na_cyt);
    I_Na_md_b = G_Na_b*f_md*(V_m_md-E_Na_md);
    I_Cl_cyt_b = G_Cl_b*f_cyt*(V_m_cyt-E_Cl_cyt);
    I_Cl_md_b = G_Cl_b*f_md*(V_m_md-E_Cl_md);
    I_Ca_cyt_b = G_Ca_b*f_cyt*(V_m_cyt-E_Ca_cyt);
    I_Ca_md_b = G_Ca_b*f_md*(V_m_md-E_Ca_md);
  enddef;
  def map between Parameters and Background_Currents for
    vars G_K_b and G_K_b;
    vars G_Na_b and G_Na_b;
    vars G_Ca_b and G_Ca_b;
    vars G_Cl_b and G_Cl_b;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Calcium_Conc_md and Background_Currents for
    vars I_Ca_md_b and I_Ca_md_b;
  enddef;
  def map between Calcium_Conc_cyt and Background_Currents for
    vars I_Ca_cyt_b and I_Ca_cyt_b;
  enddef;
  def map between Chloride_Conc_md and Background_Currents for
    vars I_Cl_md_b and I_Cl_md_b;
  enddef;
  def map between Chloride_Conc_cyt and Background_Currents for
    vars I_Cl_cyt_b and I_Cl_cyt_b;
  enddef;
  def map between Sodium_Conc_md and Background_Currents for
    vars I_Na_md_b and I_Na_md_b;
  enddef;
  def map between Sodium_Conc_cyt and Background_Currents for
    vars I_Na_cyt_b and I_Na_cyt_b;
  enddef;
  def map between Potassium_Conc_md and Background_Currents for
    vars I_K_md_b and I_K_md_b;
  enddef;
  def map between Potassium_Conc_cyt and Background_Currents for
    vars I_K_cyt_b and I_K_cyt_b;
  enddef;
  def unit J_per_mol_K as
    unit Joule2;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;

  def comp Nernst_Potentials as
    var E_K_cyt: volt {pub: out};
    var E_K_md: volt {pub: out};
    var E_Na_cyt: volt {pub: out};
    var E_Na_md: volt {pub: out};
    var E_Cl_cyt: volt {pub: out};
    var E_Cl_md: volt {pub: out};
    var E_Ca_cyt: volt {pub: out};
    var E_Ca_md: volt {pub: out};
    var conc_K_out: Molar {init: 5.4, pub: out};
    var conc_Na_out: Molar {init: 140, pub: out};
    var conc_Cl_out: Molar {init: 110, pub: out};
    var conc_Ca_out: Molar {init: 2.0, pub: out};
    var conc_K_cyt: Molar {pub: in};
    var conc_K_md: Molar {pub: in};
    var conc_Na_cyt: Molar {pub: in};
    var conc_Na_md: Molar {pub: in};
    var conc_Cl_cyt: Molar {pub: in};
    var conc_Cl_md: Molar {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var R: J_per_mol_K {pub: in};
    var F: sec_A_per_mol {pub: in};
    var T: kelvin {pub: in};
    var z_K: dimensionless {init: 1};
    var z_Na: dimensionless {init: 1};
    var z_Cl: dimensionless {init: -1};
    var z_Ca: dimensionless {init: 2};
    E_K_cyt = RTF/z_K*ln(conc_K_out/conc_K_cyt);
    E_K_md = RTF/z_K*ln(conc_K_out/conc_K_md);
    E_Na_cyt = RTF/z_Na*ln(conc_Na_out/conc_Na_cyt);
    E_Na_md = RTF/z_Na*ln(conc_Na_out/conc_Na_md);
    E_Cl_cyt = RTF/z_Cl*ln(conc_Cl_out/conc_Cl_cyt);
    E_Cl_md = RTF/z_Cl*ln(conc_Cl_out/conc_Cl_md);
    E_Ca_cyt = RTF/z_Ca*ln(conc_Ca_out/conc_Ca_cyt);
    E_Ca_md = RTF/z_Ca*ln(conc_Ca_out/conc_Ca_md);
    RTF = R*T/F;
    var RTF: volt;
  enddef;

  def comp SERCA_Currents_IP3R as
    var I_cyt_SERCa_IP3R: ampere {pub: out};
    var I_md_SERCa_IP3R: ampere {pub: out};
    var I_SERCA_max: ampere {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var K_mf: Molar {pub: in};
    var K_mr: Molar {pub: in};
    var conc_Ca_IP3R: Molar {pub: in};
    var n_H: dimensionless {pub: in};
    I_cyt_SERCa_IP3R = I_SERCA_max*f_cyt*((pow(conc_Ca_cyt/K_mf, n_H)-pow(conc_Ca_IP3R/K_mr, n_H))/(1{dimensionless}+pow(conc_Ca_cyt/K_mf, n_H)+pow(conc_Ca_IP3R/K_mr, n_H)));
    I_md_SERCa_IP3R = I_SERCA_max*f_md*((pow(conc_Ca_md/K_mf, n_H)-pow(conc_Ca_IP3R/K_mr, n_H))/(1{dimensionless}+pow(conc_Ca_md/K_mf, n_H)+pow(conc_Ca_IP3R/K_mr, n_H)));
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
  enddef;
  def map between Background_Currents and Nernst_Potentials for
    vars E_K_cyt and E_K_cyt;
    vars E_K_md and E_K_md;
    vars E_Na_cyt and E_Na_cyt;
    vars E_Na_md and E_Na_md;
    vars E_Cl_cyt and E_Cl_cyt;
    vars E_Ca_cyt and E_Ca_cyt;
    vars E_Ca_md and E_Ca_md;
    vars E_Cl_md and E_Cl_md;
  enddef;
  def map between Parameters and Nernst_Potentials for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between Potassium_Conc_cyt and Nernst_Potentials for
    vars conc_K_cyt and conc_K_cyt;
  enddef;
  def map between Potassium_Conc_md and Nernst_Potentials for
    vars conc_K_md and conc_K_md;
  enddef;
  def map between Sodium_Conc_cyt and Nernst_Potentials for
    vars conc_Na_cyt and conc_Na_cyt;
  enddef;
  def map between Sodium_Conc_md and Nernst_Potentials for
    vars conc_Na_md and conc_Na_md;
  enddef;
  def map between Chloride_Conc_cyt and Nernst_Potentials for
    vars conc_Cl_cyt and conc_Cl_cyt;
  enddef;
  def map between Chloride_Conc_md and Nernst_Potentials for
    vars conc_Cl_md and conc_Cl_md;
  enddef;
  def map between Calcium_Conc_md and Nernst_Potentials for
    vars conc_Ca_md and conc_Ca_md;
  enddef;

  def comp SERCA_Currents_RyR as
    var I_cyt_SERCa_RyR: ampere {pub: out};
    var I_md_SERCa_RyR: ampere {pub: out};
    var I_SERCA_max: ampere {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var K_mf: Molar {pub: in};
    var K_mr: Molar {pub: in};
    var conc_Ca_RyR: Molar {pub: in};
    var n_H: dimensionless {pub: in};
    I_cyt_SERCa_RyR = I_SERCA_max*f_cyt*((pow(conc_Ca_cyt/K_mf, n_H)-pow(conc_Ca_RyR/K_mr, n_H))/(1{dimensionless}+pow(conc_Ca_cyt/K_mf, n_H)+pow(conc_Ca_RyR/K_mr, n_H)));
    I_md_SERCa_RyR = I_SERCA_max*f_md*((pow(conc_Ca_md/K_mf, n_H)-pow(conc_Ca_RyR/K_mr, n_H))/(1{dimensionless}+pow(conc_Ca_md/K_mf, n_H)+pow(conc_Ca_RyR/K_mr, n_H)));
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
  enddef;
  def map between Parameters and SERCA_Currents_IP3R for
    vars K_mr and K_mr;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
    vars n_H and n_H;
  enddef;
  def map between Parameters and SERCA_Currents_RyR for
    vars K_mr and K_mr;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
    vars n_H and n_H;
  enddef;
  def map between Calcium_Conc_md and SERCA_Currents_IP3R for
    vars conc_Ca_md and conc_Ca_md;
    vars I_md_SERCa_IP3R and I_md_SERCa_IP3R;
  enddef;
  def map between Calcium_Conc_cyt and SERCA_Currents_IP3R for
    vars conc_Ca_cyt and conc_Ca_cyt;
    vars I_cyt_SERCa_IP3R and I_cyt_SERCa_IP3R;
  enddef;
  def map between Calcium_Conc_cyt and SERCA_Currents_RyR for
    vars conc_Ca_cyt and conc_Ca_cyt;
    vars I_cyt_SERCa_RyR and I_cyt_SERCa_RyR;
  enddef;
  def map between Calcium_Conc_md and SERCA_Currents_RyR for
    vars conc_Ca_md and conc_Ca_md;
    vars I_md_SERCa_RyR and I_md_SERCa_RyR;
  enddef;
  def map between Calcium_Conc_SR and SERCA_Currents_IP3R for
    vars conc_Ca_IP3R and conc_Ca_IP3R;
    vars I_md_SERCa_IP3R and I_md_SERCa_IP3R;
    vars I_cyt_SERCa_IP3R and I_cyt_SERCa_IP3R;
  enddef;
  def map between Calcium_Conc_SR and SERCA_Currents_RyR for
    vars conc_Ca_RyR and conc_Ca_RyR;
    vars I_cyt_SERCa_RyR and I_cyt_SERCa_RyR;
    vars I_md_SERCa_RyR and I_md_SERCa_RyR;
  enddef;

  def comp RyR_Currents as
    var I_cyt_RyR: ampere {pub: out};
    var I_md_RyR: ampere {pub: out};
    var P_cyt_RyR: dimensionless;
    var P_md_RyR: dimensionless;
    var w_cyt: dimensionless {init: 0.11187};
    var w_md: dimensionless {init: 0.89971};
    var conc_Ca_RyR: Molar {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var w_inf_cyt: dimensionless;
    var w_inf_md: dimensionless;
    var K_a: Molar {pub: in};
    var K_b: Molar {pub: in};
    var K_c: Molar {pub: in};
    var K_c_rate: per_sec {pub: in};
    var v_RyR: per_sec {pub: in};
    var vol_SR: cubic_Meter {pub: in};
    var F: sec_A_per_mol {pub: in};
    I_cyt_RyR = v_RyR*P_cyt_RyR*(conc_Ca_RyR-conc_Ca_cyt)*(2{dimensionless}*F*vol_SR);
    I_md_RyR = v_RyR*P_md_RyR*(conc_Ca_RyR-conc_Ca_md)*(2{dimensionless}*F*vol_SR);
    P_cyt_RyR = w_cyt*(1{dimensionless}+pow(conc_Ca_cyt/K_b, 3{dimensionless}))/(1{dimensionless}+pow(K_a/conc_Ca_cyt, 4{dimensionless})+pow(conc_Ca_cyt/K_b, 3{dimensionless}));
    P_md_RyR = w_md*(1{dimensionless}+pow(conc_Ca_md/K_b, 3{dimensionless}))/(1{dimensionless}+pow(K_a/conc_Ca_md, 4{dimensionless})+pow(conc_Ca_md/K_b, 3{dimensionless}));
    ode(w_cyt, time) = K_c_rate*(w_inf_cyt-w_cyt)/w_inf_cyt;
    ode(w_md, time) = K_c_rate*(w_inf_md-w_md)/w_inf_md;
    w_inf_cyt = (1{dimensionless}+pow(K_a/conc_Ca_cyt, 4{dimensionless})+pow(conc_Ca_cyt/K_b, 3{dimensionless}))/(1{dimensionless}+1{Molar}/K_c+pow(K_a/conc_Ca_cyt, 4{dimensionless})+pow(conc_Ca_cyt/K_b, 3{dimensionless}));
    w_inf_md = (1{dimensionless}+pow(K_a/conc_Ca_md, 4{dimensionless})+pow(conc_Ca_md/K_b, 3{dimensionless}))/(1{dimensionless}+1{Molar}/K_c+pow(K_a/conc_Ca_md, 4{dimensionless})+pow(conc_Ca_md/K_b, 3{dimensionless}));
    var time: second {pub: in};
  enddef;
  def map between Environment and RyR_Currents for
    vars time and time;
  enddef;
  def map between Parameters and RyR_Currents for
    vars F and F;
    vars vol_SR and vol_SR;
    vars v_RyR and v_RyR;
    vars K_a and K_a;
    vars K_b and K_b;
    vars K_c and K_c;
    vars K_c_rate and K_c_rate;
  enddef;
  def map between Calcium_Conc_SR and RyR_Currents for
    vars conc_Ca_RyR and conc_Ca_RyR;
    vars I_md_RyR and I_md_RyR;
    vars I_cyt_RyR and I_cyt_RyR;
  enddef;
  def map between Calcium_Conc_md and RyR_Currents for
    vars conc_Ca_md and conc_Ca_md;
    vars I_md_RyR and I_md_RyR;
  enddef;
  def map between Calcium_Conc_cyt and RyR_Currents for
    vars conc_Ca_cyt and conc_Ca_cyt;
    vars I_cyt_RyR and I_cyt_RyR;
  enddef;

  def comp IP3R_Currents as
    var I_cyt_IP3R: ampere {pub: out};
    var I_md_IP3R: ampere {pub: out};
    var conc_Ca_IP3R: Molar {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var v_IP3: per_sec {pub: in};
    var x110_cyt: dimensionless {pub: in};
    var x110_md: dimensionless {pub: in};
    var F: sec_A_per_mol {pub: in};
    var vol_SR: cubic_Meter {pub: in};
    var conc_IP3_cyt: Molar {init: 2.4140E-4, pub: out};
    var conc_IP3_md: Molar {init: 2.7808E-4, pub: out};
    var conc_IP3_ref: Molar {pub: in};
    var alpha_4: dimensionless {pub: in};
    var k4: Molar {pub: in};
    var I_r: per_sec {pub: in};
    ode(conc_IP3_cyt, time) = v_IP3*conc_IP3_ref*((conc_Ca_cyt+(1{dimensionless}-alpha_4)*k4)/(conc_Ca_cyt+k4))-I_r*conc_IP3_cyt;
    ode(conc_IP3_md, time) = v_IP3*conc_IP3_ref*((conc_Ca_md+(1{dimensionless}-alpha_4)*k4)/(conc_Ca_md+k4))-I_r*conc_IP3_md;
    I_cyt_IP3R = v_IP3R*pow(x110_cyt, 3{dimensionless})*(conc_Ca_IP3R-conc_Ca_cyt)*2{dimensionless}*F*vol_SR;
    I_md_IP3R = v_IP3R*pow(x110_md, 3{dimensionless})*(conc_Ca_IP3R-conc_Ca_md)*2{dimensionless}*F*vol_SR;
    var v_IP3R: per_sec {pub: in};
    var time: second {pub: in};
  enddef;
  def map between Environment and IP3R_Currents for
    vars time and time;
  enddef;
  def map between Parameters and IP3R_Currents for
    vars F and F;
    vars vol_SR and vol_SR;
    vars v_IP3R and v_IP3R;
    vars v_IP3 and v_IP3;
    vars conc_IP3_ref and conc_IP3_ref;
    vars alpha_4 and alpha_4;
    vars I_r and I_r;
    vars k4 and k4;
  enddef;
  def map between Calcium_Conc_md and IP3R_Currents for
    vars conc_Ca_md and conc_Ca_md;
    vars I_md_IP3R and I_md_IP3R;
  enddef;
  def map between Calcium_Conc_SR and IP3R_Currents for
    vars conc_Ca_IP3R and conc_Ca_IP3R;
    vars I_cyt_IP3R and I_cyt_IP3R;
    vars I_md_IP3R and I_md_IP3R;
  enddef;
  def map between Calcium_Conc_cyt and IP3R_Currents for
    vars conc_Ca_cyt and conc_Ca_cyt;
    vars I_cyt_IP3R and I_cyt_IP3R;
  enddef;

  def comp IP3R_Binding_Sites as
    var a4: per_M_sec {pub: in};
    var a5: per_M_sec {pub: in};
    var x000_cyt: dimensionless {init: 0.11631, pub: out};
    var x000_md: dimensionless {init: 0.028019, pub: out};
    var x001_cyt: dimensionless {init: 0.084779, pub: out};
    var x001_md: dimensionless {init: 0.072097, pub: out};
    var x010_cyt: dimensionless {init: 0.14878, pub: out};
    var x010_md: dimensionless {init: 0.12652, pub: out};
    var x011_cyt: dimensionless {pub: out};
    var x011_md: dimensionless {pub: out};
    var x101_cyt: dimensionless {pub: out};
    var x101_md: dimensionless {pub: out};
    var x110_cyt: dimensionless {pub: out};
    var x110_md: dimensionless {pub: out};
    var x111_cyt: dimensionless {pub: out};
    var x111_md: dimensionless {pub: out};
    var d1: Molar {pub: in};
    var d4: Molar {pub: in};
    var d5: Molar {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    ode(x000_cyt, time) = -a4*(conc_Ca_cyt*x000_cyt-d4*x001_cyt)-a5*(conc_Ca_cyt*x000_cyt-d5*x010_cyt);
    ode(x000_md, time) = -a4*(conc_Ca_md*x000_md-d4*x001_md)-a5*(conc_Ca_md*x000_md-d5*x010_md);
    ode(x001_cyt, time) = a4*(conc_Ca_cyt*x000_cyt-d4*x001_cyt)-a5*(conc_Ca_cyt*x001_cyt-d5*x011_cyt);
    ode(x001_md, time) = a4*(conc_Ca_md*x000_md-d4*x001_md)-a5*(conc_Ca_md*x001_md-d5*x011_md);
    ode(x010_cyt, time) = a5*(conc_Ca_cyt*x000_cyt-d5*x010_cyt)-a4*(conc_Ca_cyt*x010_cyt-d4*x011_cyt);
    ode(x010_md, time) = a5*(conc_Ca_md*x000_md-d5*x010_md)-a4*(conc_Ca_md*x010_md-d4*x011_md);
    x100_cyt = conc_IP3_cyt/d1*x000_cyt;
    x100_md = conc_IP3_md/d1*x000_md;
    x101_cyt = conc_IP3_cyt/d3*x001_cyt;
    x101_md = conc_IP3_md/d3*x001_md;
    x110_cyt = conc_IP3_cyt/d1*x010_cyt;
    x110_md = conc_IP3_md/d1*x010_md;
    x111_cyt = conc_IP3_cyt/d3*x011_cyt;
    x111_md = conc_IP3_md/d3*x011_md;
    x011_cyt = 1{dimensionless}-(x000_cyt+x001_cyt+x010_cyt+x100_cyt+x101_cyt+x110_cyt+x111_cyt);
    x011_md = 1{dimensionless}-(x000_md+x001_md+x010_md+x100_md+x101_md+x110_md+x111_md);
    var time: second {pub: in};
    var x100_cyt: dimensionless {pub: out};
    var x100_md: dimensionless {pub: out};
    var conc_IP3_cyt: Molar {pub: in};
    var conc_IP3_md: Molar {pub: in};
    var d3: Molar {init: 9.434E-4};
  enddef;
  def map between IP3R_Currents and IP3R_Binding_Sites for
    vars x110_cyt and x110_cyt;
    vars x110_md and x110_md;
    vars conc_IP3_cyt and conc_IP3_cyt;
    vars conc_IP3_md and conc_IP3_md;
  enddef;
  def map between Environment and IP3R_Binding_Sites for
    vars time and time;
  enddef;
  def map between Parameters and IP3R_Binding_Sites for
    vars d1 and d1;
    vars a4 and a4;
    vars d4 and d4;
    vars a5 and a5;
    vars d5 and d5;
  enddef;
  def map between Calcium_Conc_cyt and IP3R_Binding_Sites for
    vars conc_Ca_cyt and conc_Ca_cyt;
  enddef;
  def map between Calcium_Conc_md and IP3R_Binding_Sites for
    vars conc_Ca_md and conc_Ca_md;
  enddef;

  def comp SOC_Current_Ca as
    var I_Ca_cyt_SOC: ampere {pub: out};
    var I_Ca_md_SOC: ampere {pub: out};
    var G_CaSOC_max: siemens2 {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var K_SOC: Molar {pub: in};
    var conc_Ca_SR: Molar;
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var E_Ca_cyt: volt {pub: in};
    var E_Ca_md: volt {pub: in};
    I_Ca_cyt_SOC = G_CaSOC_max*(K_SOC/(K_SOC+conc_Ca_SR))*(V_m_cyt-E_Ca_cyt);
    I_Ca_md_SOC = G_CaSOC_max*(K_SOC/(K_SOC+conc_Ca_SR))*(V_m_md-E_Ca_md);
    conc_Ca_SR = (conc_Ca_IP3R+conc_Ca_RyR)/2{dimensionless};
    var conc_Ca_IP3R: Molar {pub: in};
    var conc_Ca_RyR: Molar {pub: in};
  enddef;
  def map between Parameters and SOC_Current_Ca for
    vars G_CaSOC_max and G_CaSOC_max;
    vars K_SOC and K_SOC;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Calcium_Conc_cyt and SOC_Current_Ca for
    vars I_Ca_cyt_SOC and I_Ca_cyt_SOC;
  enddef;
  def map between Calcium_Conc_md and SOC_Current_Ca for
    vars I_Ca_md_SOC and I_Ca_md_SOC;
  enddef;
  def map between Calcium_Conc_SR and SOC_Current_Ca for
    vars conc_Ca_IP3R and conc_Ca_IP3R;
    vars conc_Ca_RyR and conc_Ca_RyR;
  enddef;
  def map between Nernst_Potentials and SOC_Current_Ca for
    vars E_Ca_cyt and E_Ca_cyt;
    vars E_Ca_md and E_Ca_md;
  enddef;

  def comp SOC_Current_Na as
    var I_Na_cyt_SOC: ampere {pub: out};
    var I_Na_md_SOC: ampere {pub: out};
    var I_Ca_cyt_SOC: ampere {pub: in};
    var I_Ca_md_SOC: ampere {pub: in};
    var z_Na: dimensionless {init: 1};
    var z_Ca: dimensionless {init: 2};
    var P_SOC_ratio: dimensionless {init: 0.125};
    var conc_Na_cyt: Molar {pub: in};
    var conc_Na_md: Molar {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var conc_Na_out: Molar {pub: in};
    var conc_Ca_out: Molar {pub: in};
    var F: sec_A_per_mol {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    I_Na_cyt_SOC = I_Ca_cyt_SOC*(sqr(z_Na)/sqr(z_Ca)*P_SOC_ratio)*((conc_Na_cyt-conc_Na_out*exp(-z_Na*F*V_m_cyt/(R*T)))/(conc_Ca_cyt-conc_Ca_out*exp(-z_Ca*F*V_m_cyt/(R*T))))*((1{dimensionless}-exp(-z_Ca*F*V_m_cyt/(R*T)))/(1{dimensionless}-exp(-z_Na*F*V_m_cyt/(R*T))));
    I_Na_md_SOC = I_Ca_md_SOC*(sqr(z_Na)/sqr(z_Ca)*P_SOC_ratio)*((conc_Na_md-conc_Na_out*exp(-z_Na*F*V_m_md/(R*T)))/(conc_Ca_md-conc_Ca_out*exp(-z_Ca*F*V_m_md/(R*T))))*((1{dimensionless}-exp(-z_Ca*F*V_m_md/(R*T)))/(1{dimensionless}-exp(-z_Na*F*V_m_md/(R*T))));
  enddef;
  def map between SOC_Current_Ca and SOC_Current_Na for
    vars I_Ca_cyt_SOC and I_Ca_cyt_SOC;
    vars I_Ca_md_SOC and I_Ca_md_SOC;
  enddef;
  def map between Parameters and SOC_Current_Na for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between Calcium_Conc_cyt and SOC_Current_Na for
    vars conc_Ca_cyt and conc_Ca_cyt;
  enddef;
  def map between Calcium_Conc_md and SOC_Current_Na for
    vars conc_Ca_md and conc_Ca_md;
  enddef;
  def map between Nernst_Potentials and SOC_Current_Na for
    vars conc_Na_out and conc_Na_out;
    vars conc_Ca_out and conc_Ca_out;
  enddef;
  def map between Sodium_Conc_cyt and SOC_Current_Na for
    vars conc_Na_cyt and conc_Na_cyt;
    vars I_Na_cyt_SOC and I_Na_cyt_SOC;
  enddef;
  def map between Sodium_Conc_md and SOC_Current_Na for
    vars conc_Na_md and conc_Na_md;
    vars I_Na_md_SOC and I_Na_md_SOC;
  enddef;

  def comp Cl_flux_NaCl as
    var J_cyt_NaCl: mol_per_sec {pub: out};
    var J_md_NaCl: mol_per_sec {pub: out};
    var J_NaCl_max: mol_per_sec {pub: in};
    var E_Na_cyt: volt {pub: in};
    var E_Na_md: volt {pub: in};
    var E_Cl_cyt: volt {pub: in};
    var E_Cl_md: volt {pub: in};
    var delta_CT: volt {pub: in};
    J_cyt_NaCl = J_NaCl_max*f_cyt*(pow(E_Na_cyt-E_Cl_cyt, 4{dimensionless})/(pow(E_Na_cyt-E_Cl_cyt, 4{dimensionless})+pow(delta_CT, 4{dimensionless})));
    J_md_NaCl = J_NaCl_max*f_md*(pow(E_Na_md-E_Cl_md, 4{dimensionless})/(pow(E_Na_md-E_Cl_md, 4{dimensionless})+pow(delta_CT, 4{dimensionless})));
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
  enddef;
  def map between Parameters and Cl_flux_NaCl for
    vars delta_CT and delta_CT;
    vars J_NaCl_max and J_NaCl_max;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;

  def comp Cl_flux_KCl as
    var J_cyt_KCl: mol_per_sec {pub: out};
    var J_md_KCl: mol_per_sec {pub: out};
    var J_KCl_max: mol_per_sec {pub: in};
    var E_K_cyt: volt {pub: in};
    var E_K_md: volt {pub: in};
    var E_Cl_cyt: volt {pub: in};
    var E_Cl_md: volt {pub: in};
    var delta_CT: volt {pub: in};
    J_cyt_KCl = J_KCl_max*f_cyt*((E_K_cyt-E_Cl_cyt)/(E_K_cyt-E_Cl_cyt+delta_CT));
    J_md_KCl = J_KCl_max*f_md*((E_K_md-E_Cl_md)/(E_K_md-E_Cl_md+delta_CT));
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
  enddef;
  def map between Parameters and Cl_flux_KCl for
    vars delta_CT and delta_CT;
    vars J_KCl_max and J_KCl_max;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Nernst_Potentials and Cl_flux_NaCl for
    vars E_Na_cyt and E_Na_cyt;
    vars E_Na_md and E_Na_md;
    vars E_Cl_cyt and E_Cl_cyt;
    vars E_Cl_md and E_Cl_md;
  enddef;
  def map between Nernst_Potentials and Cl_flux_KCl for
    vars E_K_cyt and E_K_cyt;
    vars E_K_md and E_K_md;
    vars E_Cl_cyt and E_Cl_cyt;
    vars E_Cl_md and E_Cl_md;
  enddef;
  def map between Chloride_Conc_cyt and Cl_flux_NaCl for
    vars J_cyt_NaCl and J_cyt_NaCl;
  enddef;
  def map between Chloride_Conc_md and Cl_flux_NaCl for
    vars J_md_NaCl and J_md_NaCl;
  enddef;
  def map between Chloride_Conc_cyt and Cl_flux_KCl for
    vars J_cyt_KCl and J_cyt_KCl;
  enddef;
  def map between Chloride_Conc_md and Cl_flux_KCl for
    vars J_md_KCl and J_md_KCl;
  enddef;

  def comp Cl_flux_NKCC as
    var J_cyt_NKCC: mol_per_sec {pub: out};
    var J_md_NKCC: mol_per_sec {pub: out};
    var J_NKCC_max: mol_per_sec {pub: in};
    var delta_CT: volt {pub: in};
    J_cyt_NKCC = J_NKCC_max*f_cyt*((conc_Na_out*conc_K_out*sqr(conc_Cl_out)-conc_Na_cyt*conc_K_cyt*sqr(conc_Cl_cyt))*K_NKCC_Na*K_NKCC_K*K_NKCC_Cl1*K_NKCC_Cl2/((conc_Na_out+K_NKCC_Na)*(conc_K_out+K_NKCC_K)*(conc_Cl_out+K_NKCC_Cl1)*(conc_Cl_out+K_NKCC_Cl2)*(conc_Na_cyt+K_NKCC_Na)*(conc_K_cyt+K_NKCC_K)*(conc_Cl_cyt+K_NKCC_Cl1)*(conc_Cl_cyt+K_NKCC_Cl2)));
    J_md_NKCC = J_NKCC_max*f_md*((conc_Na_out*conc_K_out*sqr(conc_Cl_out)-conc_Na_md*conc_K_md*sqr(conc_Cl_md))*K_NKCC_Na*K_NKCC_K*K_NKCC_Cl1*K_NKCC_Cl2/((conc_Na_out+K_NKCC_Na)*(conc_K_out+K_NKCC_K)*(conc_Cl_out+K_NKCC_Cl1)*(conc_Cl_out+K_NKCC_Cl2)*(conc_Na_md+K_NKCC_Na)*(conc_K_md+K_NKCC_K)*(conc_Cl_md+K_NKCC_Cl1)*(conc_Cl_md+K_NKCC_Cl2)));
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var conc_Na_out: Molar {pub: in};
    var conc_Cl_out: Molar {pub: in};
    var conc_K_out: Molar {pub: in};
    var conc_Na_cyt: Molar {pub: in};
    var conc_Na_md: Molar {pub: in};
    var conc_K_cyt: Molar {pub: in};
    var conc_K_md: Molar {pub: in};
    var conc_Cl_cyt: Molar {pub: in};
    var conc_Cl_md: Molar {pub: in};
    var K_NKCC_Na: Molar {pub: in};
    var K_NKCC_K: Molar {pub: in};
    var K_NKCC_Cl1: Molar {pub: in};
    var K_NKCC_Cl2: Molar {pub: in};
  enddef;
  def map between Parameters and Cl_flux_NKCC for
    vars delta_CT and delta_CT;
    vars J_NKCC_max and J_NKCC_max;
    vars K_NKCC_Na and K_NKCC_Na;
    vars K_NKCC_K and K_NKCC_K;
    vars K_NKCC_Cl1 and K_NKCC_Cl1;
    vars K_NKCC_Cl2 and K_NKCC_Cl2;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Chloride_Conc_cyt and Cl_flux_NKCC for
    vars conc_Cl_cyt and conc_Cl_cyt;
    vars J_cyt_NKCC and J_cyt_NKCC;
  enddef;
  def map between Chloride_Conc_md and Cl_flux_NKCC for
    vars conc_Cl_md and conc_Cl_md;
    vars J_md_NKCC and J_md_NKCC;
  enddef;
  def map between Sodium_Conc_md and Cl_flux_NKCC for
    vars conc_Na_md and conc_Na_md;
    vars J_md_NKCC and J_md_NKCC;
  enddef;
  def map between Sodium_Conc_cyt and Cl_flux_NKCC for
    vars conc_Na_cyt and conc_Na_cyt;
    vars J_cyt_NKCC and J_cyt_NKCC;
  enddef;
  def map between Potassium_Conc_cyt and Cl_flux_NKCC for
    vars conc_K_cyt and conc_K_cyt;
    vars J_cyt_NKCC and J_cyt_NKCC;
  enddef;
  def map between Potassium_Conc_md and Cl_flux_NKCC for
    vars conc_K_md and conc_K_md;
    vars J_md_NKCC and J_md_NKCC;
  enddef;
  def map between Nernst_Potentials and Cl_flux_NKCC for
    vars conc_K_out and conc_K_out;
    vars conc_Na_out and conc_Na_out;
    vars conc_Cl_out and conc_Cl_out;
  enddef;

  def comp Cl_Channels_cyt as
    var y_C1_cyt: dimensionless {init: 0.0062437};
    var y_C2_cyt: dimensionless {init: 0.000039459};
    var y_C3_cyt: dimensionless {init: 0.00000024937};
    var y_O1_cyt: dimensionless {init: 0.0056570, pub: out};
    var y_O2_cyt: dimensionless {init: 0.00010725, pub: out};
    var y_O3_cyt: dimensionless {init: 0.0000067783, pub: out};
    var k_on: per_M_sec {pub: in};
    var k_off: per_sec {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var alpha1: per_sec {pub: in};
    var alpha2: per_sec {pub: in};
    var alpha3: per_sec {pub: in};
    var Beta_cyt: per_sec {pub: in};
    var time: second {pub: in};
    ode(y_C1_cyt, time) = -k_on*conc_Ca_cyt*(y_C1_cyt-y_C0_cyt)+k_off*(y_C2_cyt-y_C1_cyt)-alpha1*y_C1_cyt+Beta_cyt*y_O1_cyt;
    ode(y_C2_cyt, time) = -k_on*conc_Ca_cyt*(y_C2_cyt-y_C1_cyt)+k_off*(y_C3_cyt-y_C2_cyt)-alpha2*y_C2_cyt+Beta_cyt*y_O2_cyt;
    ode(y_C3_cyt, time) = k_on*conc_Ca_cyt*y_C2_cyt-k_off*y_C3_cyt-alpha3*y_C3_cyt+Beta_cyt*y_O3_cyt;
    ode(y_O1_cyt, time) = alpha1*y_C1_cyt-Beta_cyt*y_O1_cyt;
    ode(y_O2_cyt, time) = alpha2*y_C2_cyt-Beta_cyt*y_O2_cyt;
    ode(y_O3_cyt, time) = alpha3*y_C3_cyt-Beta_cyt*y_O3_cyt;
    1{dimensionless} = y_C0_cyt+y_C1_cyt+y_C2_cyt+y_C3_cyt+y_O1_cyt+y_O2_cyt+y_O3_cyt;
    var y_C0_cyt: dimensionless;
  enddef;

  def comp Cl_Channels_md as
    var y_C1_md: dimensionless {init: 2.1346E-2, pub: out};
    var y_C2_md: dimensionless {init: 4.7620E-4, pub: out};
    var y_C3_md: dimensionless {init: 1.0624E-5, pub: out};
    var y_O1_md: dimensionless {init: 1.9731E-2, pub: out};
    var y_O2_md: dimensionless {init: 1.3205E-3, pub: out};
    var y_O3_md: dimensionless {init: 2.94594E-4, pub: out};
    var k_on: per_M_sec {pub: in};
    var k_off: per_sec {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var alpha1: per_sec {pub: in};
    var alpha2: per_sec {pub: in};
    var alpha3: per_sec {pub: in};
    var Beta_md: per_sec {pub: in};
    var time: second {pub: in};
    var y_C0_md: dimensionless {pub: out};
    ode(y_C1_md, time) = -k_on*conc_Ca_md*(y_C1_md-y_C0_md)+k_off*(y_C2_md-y_C1_md)-alpha1*y_C1_md+Beta_md*y_O1_md;
    ode(y_C2_md, time) = -k_on*conc_Ca_md*(y_C2_md-y_C1_md)+k_off*(y_C3_md-y_C2_md)-alpha2*y_C2_md+Beta_md*y_O2_md;
    ode(y_C3_md, time) = k_on*conc_Ca_md*y_C2_md-k_off*y_C3_md-alpha3*y_C3_md+Beta_md*y_O3_md;
    ode(y_O1_md, time) = alpha1*y_C1_md-Beta_md*y_O1_md;
    ode(y_O2_md, time) = alpha2*y_C2_md-Beta_md*y_O2_md;
    ode(y_O3_md, time) = alpha3*y_C3_md-Beta_md*y_O3_md;
    1{dimensionless} = y_C0_md+y_C1_md+y_C2_md+y_C3_md+y_O1_md+y_O2_md+y_O3_md;
  enddef;
  def map between Environment and Cl_Channels_cyt for
    vars time and time;
  enddef;
  def map between Parameters and Cl_Channels_cyt for
    vars k_on and k_on;
    vars k_off and k_off;
    vars alpha1 and alpha1;
    vars alpha2 and alpha2;
    vars alpha3 and alpha3;
  enddef;
  def map between Calcium_Conc_cyt and Cl_Channels_cyt for
    vars conc_Ca_cyt and conc_Ca_cyt;
  enddef;
  def map between Environment and Cl_Channels_md for
    vars time and time;
  enddef;
  def map between Parameters and Cl_Channels_md for
    vars k_on and k_on;
    vars k_off and k_off;
    vars alpha1 and alpha1;
    vars alpha2 and alpha2;
    vars alpha3 and alpha3;
  enddef;
  def map between Calcium_Conc_md and Cl_Channels_md for
    vars conc_Ca_md and conc_Ca_md;
  enddef;

  def comp Cl_Channel_Rates as
    var Beta_cyt: per_sec {pub: out};
    var Beta_md: per_sec {pub: out};
    var V1: dimensionless {init: -3.8};
    var V2: per_V {init: -10.0};
    var Lambda_Beta: per_sec {init: 224};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    Beta_cyt = Lambda_Beta*exp(V1+V2*V_m_cyt);
    Beta_md = Lambda_Beta*exp(V1+V2*V_m_md);
  enddef;

  def comp ClCa_Current as
    var I_Cl_cyt_Ca: ampere {pub: out};
    var I_Cl_md_Ca: ampere {pub: out};
    var G_ClCa_max: siemens2 {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var y_O1_cyt: dimensionless {pub: in};
    var y_O2_cyt: dimensionless {pub: in};
    var y_O3_cyt: dimensionless {pub: in};
    var y_O1_md: dimensionless {pub: in};
    var y_O2_md: dimensionless {pub: in};
    var y_O3_md: dimensionless {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var E_Cl_cyt: volt {pub: in};
    var E_Cl_md: volt {pub: in};
    I_Cl_cyt_Ca = G_ClCa_max*f_cyt*(y_O1_cyt+y_O2_cyt+y_O3_cyt)*(V_m_cyt-E_Cl_cyt);
    I_Cl_md_Ca = G_ClCa_max*f_md*(y_O1_md+y_O2_md+y_O3_md)*(V_m_md-E_Cl_md);
  enddef;
  def map between Cl_Channels_cyt and ClCa_Current for
    vars y_O1_cyt and y_O1_cyt;
    vars y_O2_cyt and y_O2_cyt;
    vars y_O3_cyt and y_O3_cyt;
  enddef;
  def map between Cl_Channels_md and ClCa_Current for
    vars y_O1_md and y_O1_md;
    vars y_O2_md and y_O2_md;
    vars y_O3_md and y_O3_md;
  enddef;
  def map between Parameters and ClCa_Current for
    vars G_ClCa_max and G_ClCa_max;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Chloride_Conc_md and ClCa_Current for
    vars I_Cl_md_Ca and I_Cl_md_Ca;
  enddef;
  def map between Chloride_Conc_cyt and ClCa_Current for
    vars I_Cl_cyt_Ca and I_Cl_cyt_Ca;
  enddef;

  def comp K_Inward_Rectifier_Current as
    var I_K_cyt_ir: ampere {pub: out};
    var I_K_md_ir: ampere {pub: out};
    var G_Kir_max: siemens2 {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var x_Kir_cyt: dimensionless;
    var x_Kir_md: dimensionless;
    var alpha_Kir_cyt: per_sec {pub: in};
    var alpha_Kir_md: per_sec {pub: in};
    var Beta_Kir_cyt: per_sec {pub: in};
    var Beta_Kir_md: per_sec {pub: in};
    var conc_K_out: Molar {pub: in};
    var conc_K_ref: Molar {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var E_K_cyt: volt {pub: in};
    var E_K_md: volt {pub: in};
    I_K_cyt_ir = G_Kir_max*f_cyt*x_Kir_cyt*sqrt(conc_K_out/conc_K_ref)*(V_m_cyt-E_K_cyt);
    I_K_md_ir = G_Kir_max*f_md*x_Kir_md*sqrt(conc_K_out/conc_K_ref)*(V_m_md-E_K_md);
    x_Kir_cyt = alpha_Kir_cyt/(alpha_Kir_cyt+Beta_Kir_cyt);
    x_Kir_md = alpha_Kir_md/(alpha_Kir_md+Beta_Kir_md);
  enddef;
  def map between Parameters and K_Inward_Rectifier_Current for
    vars G_Kir_max and G_Kir_max;
    vars conc_K_ref and conc_K_ref;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Potassium_Conc_cyt and K_Inward_Rectifier_Current for
    vars I_K_cyt_ir and I_K_cyt_ir;
  enddef;
  def map between Potassium_Conc_md and K_Inward_Rectifier_Current for
    vars I_K_md_ir and I_K_md_ir;
  enddef;
  def map between Nernst_Potentials and K_Inward_Rectifier_Current for
    vars E_K_cyt and E_K_cyt;
    vars E_K_md and E_K_md;
    vars conc_K_out and conc_K_out;
  enddef;

  def comp K_ir_Rates as
    var alpha_Kir_cyt: per_sec {pub: out};
    var alpha_Kir_md: per_sec {pub: out};
    var Beta_Kir_cyt: per_sec {pub: out};
    var Beta_Kir_md: per_sec {pub: out};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var E_K_cyt: volt {pub: in};
    var E_K_md: volt {pub: in};
    alpha_Kir_cyt = 3.241{per_sec}/(1{dimensionless}+exp((V_m_cyt-E_K_cyt-185.72{volt})/1.596{volt}));
    alpha_Kir_md = 3.241{per_sec}/(1{dimensionless}+exp((V_m_md-E_K_md-185.72{volt})/1.596{volt}));
    Beta_Kir_cyt = 1{per_sec}*((0.013{dimensionless}*exp((V_m_cyt-E_K_cyt+5.7922{volt})/0.294{volt})+exp((V_m_cyt-E_K_cyt-653.73299999999995{volt})/0.244{volt}))/(1{dimensionless}+exp(-(V_m_cyt-E_K_cyt-7.7775{volt})/0.0928{volt})));
    Beta_Kir_md = 1{per_sec}*((0.013{dimensionless}*exp((V_m_md-E_K_md+5.7922{volt})/0.294{volt})+exp((V_m_md-E_K_md-653.73299999999995{volt})/0.244{volt}))/(1{dimensionless}+exp(-((V_m_md-E_K_md-7.7775{volt})/0.0928{volt}))));
  enddef;
  def map between K_Inward_Rectifier_Current and K_ir_Rates for
    vars alpha_Kir_cyt and alpha_Kir_cyt;
    vars alpha_Kir_md and alpha_Kir_md;
    vars Beta_Kir_cyt and Beta_Kir_cyt;
    vars Beta_Kir_md and Beta_Kir_md;
  enddef;
  def map between Nernst_Potentials and K_ir_Rates for
    vars E_K_cyt and E_K_cyt;
    vars E_K_md and E_K_md;
  enddef;

  def comp K_Delayed_Rectifier_Current as
    var I_K_cyt_v: ampere {pub: out};
    var I_K_md_v: ampere {pub: out};
    var G_Kv_max: siemens2 {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var P_Kv_cyt: dimensionless {pub: in};
    var P_Kv_md: dimensionless {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var E_K_cyt: volt {pub: in};
    var E_K_md: volt {pub: in};
    I_K_cyt_v = G_Kv_max*f_cyt*sqr(P_Kv_cyt)*(V_m_cyt-E_K_cyt);
    I_K_md_v = G_Kv_max*f_md*sqr(P_Kv_md)*(V_m_md-E_K_md);
  enddef;

  def comp Kv_Activations as
    var P_Kv_cyt: dimensionless {pub: out};
    var P_Kv_md: dimensionless {pub: out};
    var P1_cyt: dimensionless {init: 0.0048876};
    var P1_md: dimensionless {init: 0.0056051};
    var P2_cyt: dimensionless {init: 0.0048876};
    var P2_md: dimensionless {init: 0.0056051};
    var P_bar_Kv_cyt: dimensionless;
    var P_bar_Kv_md: dimensionless;
    var Tau_P1_cyt: second {pub: in};
    var Tau_P1_md: second {pub: in};
    var Tau_P2_cyt: second {pub: in};
    var Tau_P2_md: second {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    P_Kv_cyt = 0.58{dimensionless}*P1_cyt+0.42{dimensionless}*P2_cyt;
    P_Kv_md = 0.58{dimensionless}*P1_md+0.42{dimensionless}*P2_md;
    ode(P1_cyt, time) = (P_bar_Kv_cyt-P1_cyt)/Tau_P1_cyt;
    ode(P1_md, time) = (P_bar_Kv_md-P1_md)/Tau_P1_md;
    ode(P2_cyt, time) = (P_bar_Kv_cyt-P2_cyt)/Tau_P2_cyt;
    ode(P2_md, time) = (P_bar_Kv_md-P2_md)/Tau_P2_md;
    P_bar_Kv_cyt = 1{dimensionless}/(1{dimensionless}+exp(-(V_m_cyt+0.00177{volt})/0.01452{volt}));
    P_bar_Kv_md = 1{dimensionless}/(1{dimensionless}+exp(-(V_m_md+0.00177{volt})/0.01452{volt}));
    var time: second {pub: in};
  enddef;
  def map between Environment and Kv_Activations for
    vars time and time;
  enddef;
  def map between K_Delayed_Rectifier_Current and Kv_Activations for
    vars P_Kv_cyt and P_Kv_cyt;
    vars P_Kv_md and P_Kv_md;
  enddef;

  def comp Kv_Time_Constants as
    var Tau_P1_cyt: second {pub: out};
    var Tau_P1_md: second {pub: out};
    var Tau_P2_cyt: second {pub: out};
    var Tau_P2_md: second {pub: out};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    Tau_P1_cyt = 0.2109873{second}*exp(-sqr((V_m_cyt+0.21434{volt})/0.19535{volt}))-0.02059{second};
    Tau_P1_md = 0.2109873{second}*exp(-sqr((V_m_md+0.21434{volt})/0.19535{volt}))-0.02059{second};
    Tau_P2_cyt = 0.82139{second}*exp(-sqr((V_m_cyt+0.03159{volt})/0.02746{volt}))+0.00019{second};
    Tau_P2_md = 0.82139{second}*exp(-sqr((V_m_md+0.03159{volt})/0.02746{volt}))+0.00019{second};
  enddef;
  def map between Kv_Activations and Kv_Time_Constants for
    vars Tau_P1_cyt and Tau_P1_cyt;
    vars Tau_P1_md and Tau_P1_md;
    vars Tau_P2_cyt and Tau_P2_cyt;
    vars Tau_P2_md and Tau_P2_md;
  enddef;
  def map between Potassium_Conc_cyt and K_Delayed_Rectifier_Current for
    vars I_K_cyt_v and I_K_cyt_v;
  enddef;
  def map between Potassium_Conc_md and K_Delayed_Rectifier_Current for
    vars I_K_md_v and I_K_md_v;
  enddef;

  def comp K_ATP_Current as
    var I_K_cyt_ATP: ampere {pub: out};
    var I_K_md_ATP: ampere {pub: out};
    var G_KATP_max: siemens2 {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var conc_K_ref: Molar {pub: in};
    var conc_K_out: Molar {pub: in};
    var n_ATP: dimensionless {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var E_K_cyt: volt {pub: in};
    var E_K_md: volt {pub: in};
    I_K_cyt_ATP = G_KATP_max*f_cyt*pow(conc_K_out/conc_K_ref, n_ATP)*(V_m_cyt-E_K_cyt);
    I_K_md_ATP = G_KATP_max*f_md*pow(conc_K_out/conc_K_ref, n_ATP)*(V_m_md-E_K_md);
  enddef;
  def map between Potassium_Conc_cyt and Cl_flux_KCl for
    vars J_cyt_KCl and J_cyt_KCl;
  enddef;
  def map between Potassium_Conc_md and Cl_flux_KCl for
    vars J_md_KCl and J_md_KCl;
  enddef;
  def map between Sodium_Conc_md and Cl_flux_NaCl for
    vars J_md_NaCl and J_md_NaCl;
  enddef;
  def map between Sodium_Conc_cyt and Cl_flux_NaCl for
    vars J_cyt_NaCl and J_cyt_NaCl;
  enddef;
  def map between Parameters and Sodium_Conc_md for
    vars F and F;
    vars vol_md and vol_md;
  enddef;
  def map between Environment and Sodium_Conc_md for
    vars time and time;
  enddef;
  def map between Parameters and Calcium_Conc_cyt for
    vars F and F;
    vars vol_cyt_Ca and vol_cyt_Ca;
  enddef;
  def map between Environment and Calcium_Conc_cyt for
    vars time and time;
  enddef;

  def comp K_Ca_Current as
    var I_K_cyt_Ca: ampere {pub: out};
    var I_K_md_Ca: ampere {pub: out};
    var G_KCa_max: siemens2 {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var P_KCa_cyt: dimensionless {pub: in};
    var P_KCa_md: dimensionless {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    I_K_cyt_Ca = G_KCa_max*f_cyt*P_KCa_cyt*(V_m_cyt-E_K_cyt);
    I_K_md_Ca = G_KCa_max*f_md*P_KCa_md*(V_m_md-E_K_md);
    var E_K_cyt: volt {pub: in};
    var E_K_md: volt {pub: in};
  enddef;
  def map between Potassium_Conc_cyt and K_ATP_Current for
    vars I_K_cyt_ATP and I_K_cyt_ATP;
  enddef;
  def map between Potassium_Conc_md and K_ATP_Current for
    vars I_K_md_ATP and I_K_md_ATP;
  enddef;
  def map between Nernst_Potentials and K_ATP_Current for
    vars E_K_cyt and E_K_cyt;
    vars E_K_md and E_K_md;
    vars conc_K_out and conc_K_out;
  enddef;
  def map between Parameters and K_ATP_Current for
    vars conc_K_ref and conc_K_ref;
    vars n_ATP and n_ATP;
    vars G_KATP_max and G_KATP_max;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Parameters and K_Ca_Current for
    vars G_KCa_max and G_KCa_max;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Potassium_Conc_cyt and K_Ca_Current for
    vars I_K_cyt_Ca and I_K_cyt_Ca;
  enddef;
  def map between Potassium_Conc_md and K_Ca_Current for
    vars I_K_md_Ca and I_K_md_Ca;
  enddef;

  def comp KCa_Activations as
    var P_KCa_cyt: dimensionless {pub: out};
    var P_KCa_md: dimensionless {pub: out};
    var PF_cyt: dimensionless {init: 0.94813};
    var PF_md: dimensionless {init: 0.67538};
    var PS_cyt: dimensionless {init: 0.94813};
    var PS_md: dimensionless {init: 0.67538};
    var P_bar_KCa_cyt: dimensionless;
    var P_bar_KCa_md: dimensionless;
    var Tau_PF: second {pub: in};
    var Tau_PS: second {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    P_KCa_cyt = 0.65{dimensionless}*PF_cyt+0.35{dimensionless}*PS_cyt;
    P_KCa_md = 0.65{dimensionless}*PF_md+0.35{dimensionless}*PS_md;
    ode(PF_cyt, time) = (P_bar_KCa_cyt-PF_cyt)/Tau_PF;
    ode(PF_md, time) = (P_bar_KCa_md-PF_md)/Tau_PF;
    ode(PS_cyt, time) = (P_bar_KCa_cyt-PS_cyt)/Tau_PS;
    ode(PS_md, time) = (P_bar_KCa_md-PS_md)/Tau_PS;
    P_bar_KCa_cyt = 1{dimensionless}/(1{dimensionless}+exp(-(V_m_cyt-V_KCa_cyt)/0.0308{volt}));
    P_bar_KCa_md = 1{dimensionless}/(1{dimensionless}+exp(-(V_m_md-V_KCa_md)/0.0308{volt}));
    var time: second {pub: in};
    var V_KCa_cyt: volt {pub: in};
    var V_KCa_md: volt {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
  enddef;
  def map between Parameters and KCa_Activations for
    vars Tau_PF and Tau_PF;
    vars Tau_PS and Tau_PS;
  enddef;
  def map between K_Ca_Current and KCa_Activations for
    vars P_KCa_cyt and P_KCa_cyt;
    vars P_KCa_md and P_KCa_md;
  enddef;
  def map between Calcium_Conc_md and KCa_Activations for
    vars conc_Ca_md and conc_Ca_md;
  enddef;
  def map between Calcium_Conc_cyt and KCa_Activations for
    vars conc_Ca_cyt and conc_Ca_cyt;
  enddef;
  def map between Environment and KCa_Activations for
    vars time and time;
  enddef;

  def comp NaK_alpha_Current as
    var I_NaK_cyt_alpha1: ampere {pub: out};
    var I_NaK_alpha1_max: ampere {pub: in};
    var I_NaK_alpha2_max: ampere;
    var I_NaK_md_alpha2: ampere {pub: out};
    var Psi_NaK_cyt: dimensionless {pub: in};
    var Psi_NaK_md: dimensionless {pub: in};
    var conc_K_out: Molar {pub: in};
    var K_m_K: Molar {pub: in};
    var conc_Na_cyt: Molar {pub: in};
    var conc_Na_md: Molar {pub: in};
    var K_m_Na_alpha1: Molar {pub: in};
    var K_m_Na_alpha2: Molar {pub: in};
    I_NaK_cyt_alpha1 = I_NaK_alpha1_max*Psi_NaK_cyt*(conc_K_out/(conc_K_out+K_m_K))*(pow(conc_Na_cyt, 1.5{dimensionless})/(pow(conc_Na_cyt, 1.5{dimensionless})+pow(K_m_Na_alpha1, 1.5{dimensionless})));
    I_NaK_md_alpha2 = I_NaK_alpha1_max*Psi_NaK_md*(conc_K_out/(conc_K_out+K_m_K))*(pow(conc_Na_md, 1.5{dimensionless})/(pow(conc_Na_md, 1.5{dimensionless})+pow(K_m_Na_alpha2, 1.5{dimensionless})));
    I_NaK_alpha2_max = I_NaK_alpha1_max;
  enddef;

  def comp NaK_alpha_Waveform as
    var Psi_NaK_cyt: dimensionless {pub: out};
    var Psi_NaK_md: dimensionless {pub: out};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var F: sec_A_per_mol {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    var Sigma: dimensionless;
    var conc_Na_out: Molar {pub: in};
    Psi_NaK_cyt = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V_m_cyt*F/(R*T))+0.0365{dimensionless}*Sigma*exp(-V_m_cyt*F/(R*T)));
    Psi_NaK_md = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V_m_md*F/(R*T))+0.0365{dimensionless}*Sigma*exp(-V_m_md*F/(R*T)));
    Sigma = 1{dimensionless}/7{dimensionless}*(exp(conc_Na_out/67.299999999999997{Molar})-1{dimensionless});
  enddef;
  def map between Parameters and NaK_alpha_Current for
    vars K_m_K and K_m_K;
    vars K_m_Na_alpha1 and K_m_Na_alpha1;
    vars K_m_Na_alpha2 and K_m_Na_alpha2;
  enddef;
  def map between Sodium_Conc_cyt and NaK_alpha_Current for
    vars conc_Na_cyt and conc_Na_cyt;
    vars I_NaK_cyt_alpha1 and I_NaK_cyt_alpha1;
  enddef;
  def map between Sodium_Conc_md and NaK_alpha_Current for
    vars conc_Na_md and conc_Na_md;
    vars I_NaK_md_alpha2 and I_NaK_md_alpha2;
  enddef;
  def map between Potassium_Conc_cyt and NaK_alpha_Current for
    vars I_NaK_cyt_alpha1 and I_NaK_cyt_alpha1;
  enddef;
  def map between Potassium_Conc_md and NaK_alpha_Current for
    vars I_NaK_md_alpha2 and I_NaK_md_alpha2;
  enddef;
  def map between Parameters and NaK_alpha_Waveform for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between NaK_alpha_Current and NaK_alpha_Waveform for
    vars Psi_NaK_cyt and Psi_NaK_cyt;
    vars Psi_NaK_md and Psi_NaK_md;
  enddef;
  def map between Nernst_Potentials and NaK_alpha_Waveform for
    vars conc_Na_out and conc_Na_out;
  enddef;

  def comp NCX_Current as
    var I_NaCa_md: ampere {pub: out};
    var I_NaCa_max: ampere {pub: in};
    var K_a_NaCa: dimensionless {pub: in};
    var Psi_F: dimensionless {pub: in};
    var conc_Na_md: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var Psi_R: dimensionless {pub: in};
    var conc_Na_out: Molar {pub: in};
    var conc_Ca_out: Molar {pub: in};
    var G: M_fourpow {pub: in};
    var k_sat: dimensionless {pub: in};
    I_NaCa_md = I_NaCa_max*K_a_NaCa*((Psi_F*pow(conc_Na_md, 3{dimensionless})*conc_Ca_out-Psi_R*pow(conc_Na_out, 3{dimensionless})*conc_Ca_md)/(G*(1{dimensionless}+k_sat*Psi_R)));
  enddef;
  def map between Calcium_Conc_md and NCX_Current for
    vars conc_Ca_md and conc_Ca_md;
    vars I_NaCa_md and I_NaCa_md;
  enddef;
  def map between Sodium_Conc_md and NCX_Current for
    vars conc_Na_md and conc_Na_md;
    vars I_NaCa_md and I_NaCa_md;
  enddef;
  def map between Parameters and NCX_Current for
    vars k_sat and k_sat;
    vars I_NaCa_max and I_NaCa_max;
  enddef;

  def comp NCX_Waveform as
    var K_a_NaCa: dimensionless {pub: out};
    var K_mCa_act: Molar {pub: in};
    var Psi_F: dimensionless {pub: out};
    var Psi_R: dimensionless {pub: out};
    var G: M_fourpow {pub: out};
    var conc_Ca_md: Molar {pub: in};
    var conc_Na_md: Molar {pub: in};
    var conc_Ca_out: Molar {pub: in};
    var conc_Na_out: Molar {pub: in};
    var gamma: dimensionless {pub: in};
    var F: sec_A_per_mol {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    var V_m_md: volt {pub: in};
    var K_m_Nao: Molar {pub: in};
    var K_m_Cao: Molar {pub: in};
    var K_m_Nai: Molar {pub: in};
    var K_m_Cai: Molar {pub: in};
    K_a_NaCa = 1{dimensionless}/(1{dimensionless}+sqr(K_mCa_act/conc_Ca_md));
    Psi_F = exp(gamma*V_m_md*F/(R*T));
    Psi_R = exp((gamma-1{dimensionless})*V_m_md*F/(R*T));
    G = pow(conc_Na_out, 3{dimensionless})*conc_Ca_md+pow(conc_Na_md, 3{dimensionless})*conc_Ca_out+pow(K_m_Nao, 3{dimensionless})*conc_Ca_md+K_m_Cao*pow(conc_Na_md, 3{dimensionless})+pow(K_m_Nai, 3{dimensionless})*conc_Ca_out*(1{dimensionless}+conc_Ca_md/K_m_Cai)+K_m_Cai*pow(conc_Na_out, 3{dimensionless})*(1{dimensionless}+pow(conc_Na_md/K_m_Nai, 3{dimensionless}));
  enddef;
  def map between NCX_Current and NCX_Waveform for
    vars K_a_NaCa and K_a_NaCa;
    vars Psi_F and Psi_F;
    vars Psi_R and Psi_R;
    vars G and G;
  enddef;
  def map between Parameters and NCX_Waveform for
    vars F and F;
    vars K_m_Cai and K_m_Cai;
    vars K_m_Cao and K_m_Cao;
    vars K_m_Nai and K_m_Nai;
    vars K_m_Nao and K_m_Nao;
    vars gamma and gamma;
    vars K_mCa_act and K_mCa_act;
    vars R and R;
    vars T and T;
  enddef;
  def map between Sodium_Conc_md and NCX_Waveform for
    vars conc_Na_md and conc_Na_md;
  enddef;
  def map between Calcium_Conc_md and NCX_Waveform for
    vars conc_Ca_md and conc_Ca_md;
  enddef;
  def map between Nernst_Potentials and NCX_Current for
    vars conc_Na_out and conc_Na_out;
    vars conc_Ca_out and conc_Ca_out;
  enddef;
  def map between Nernst_Potentials and NCX_Waveform for
    vars conc_Na_out and conc_Na_out;
    vars conc_Ca_out and conc_Ca_out;
  enddef;

  def comp VONa_Current as
    var I_VONa_cyt: ampere {pub: out};
    var I_VONa_md: ampere {pub: out};
    var G_VONa_max: siemens2 {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var m_VONa_cyt: dimensionless {pub: in};
    var m_VONa_md: dimensionless {pub: in};
    var h_VONa_cyt: dimensionless {pub: in};
    var h_VONa_md: dimensionless {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var E_Na_cyt: volt {pub: in};
    var E_Na_md: volt {pub: in};
    I_VONa_cyt = G_VONa_max*f_cyt*m_VONa_cyt*h_VONa_cyt*(V_m_cyt-E_Na_cyt);
    I_VONa_md = G_VONa_max*f_md*m_VONa_md*h_VONa_md*(V_m_md-E_Na_md);
  enddef;
  def map between Nernst_Potentials and VONa_Current for
    vars E_Na_cyt and E_Na_cyt;
    vars E_Na_md and E_Na_md;
  enddef;

  def comp VONa_Channels as
    var m_VONa_cyt: dimensionless {init: 1.0429E-5, pub: out};
    var m_VONa_md: dimensionless {init: 1.5817E-5, pub: out};
    var h_VONa_cyt: dimensionless {init: 0.87853, pub: out};
    var h_VONa_md: dimensionless {init: 0.84170, pub: out};
    var m_bar_cyt: dimensionless;
    var m_bar_md: dimensionless;
    var h_bar_cyt: dimensionless;
    var h_bar_md: dimensionless;
    var Tau_m: second {pub: in};
    var Tau_h: second {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var time: second {pub: in};
    ode(m_VONa_cyt, time) = (m_bar_cyt-m_VONa_cyt)/Tau_m;
    ode(m_VONa_md, time) = (m_bar_md-m_VONa_md)/Tau_m;
    ode(h_VONa_cyt, time) = (h_bar_cyt-h_VONa_cyt)/Tau_h;
    ode(h_VONa_md, time) = (h_bar_md-h_VONa_md)/Tau_h;
    m_bar_cyt = 1{dimensionless}/(1{dimensionless}+exp(-(V_m_cyt+0.0239{volt})/0.0048{volt}));
    m_bar_md = 1{dimensionless}/(1{dimensionless}+exp(-(V_m_md+0.0239{volt})/0.0048{volt}));
    h_bar_cyt = 1{dimensionless}/(1{dimensionless}+exp((V_m_cyt+0.0661{volt})/0.0065{volt}));
    h_bar_md = 1{dimensionless}/(1{dimensionless}+exp((V_m_md+0.0661{volt})/0.0065{volt}));
  enddef;
  def map between VONa_Current and VONa_Channels for
    vars m_VONa_cyt and m_VONa_cyt;
    vars m_VONa_md and m_VONa_md;
    vars h_VONa_cyt and h_VONa_cyt;
    vars h_VONa_md and h_VONa_md;
  enddef;
  def map between Parameters and VONa_Channels for
    vars Tau_m and Tau_m;
    vars Tau_h and Tau_h;
  enddef;
  def map between Environment and VONa_Channels for
    vars time and time;
  enddef;
  def map between Parameters and VONa_Current for
    vars G_VONa_max and G_VONa_max;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Sodium_Conc_cyt and VONa_Current for
    vars I_VONa_cyt and I_VONa_cyt;
  enddef;
  def map between Sodium_Conc_md and VONa_Current for
    vars I_VONa_md and I_VONa_md;
  enddef;

  def comp Ca_Pump_Current as
    var I_Ca_cyt_P: ampere {pub: out};
    var I_Ca_md_P: ampere {pub: out};
    var I_CaP_max: ampere {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var K_m_CaP: Molar {pub: in};
    I_Ca_cyt_P = I_CaP_max*f_cyt*(conc_Ca_cyt/(K_m_CaP+conc_Ca_cyt));
    I_Ca_md_P = I_CaP_max*f_md*(conc_Ca_md/(K_m_CaP+conc_Ca_md));
  enddef;
  def map between Nernst_Potentials and NaK_alpha_Current for
    vars conc_K_out and conc_K_out;
  enddef;
  def map between Parameters and Ca_Pump_Current for
    vars f_cyt and f_cyt;
    vars f_md and f_md;
    vars K_m_CaP and K_m_CaP;
  enddef;
  def map between Calcium_Conc_cyt and Ca_Pump_Current for
    vars conc_Ca_cyt and conc_Ca_cyt;
    vars I_Ca_cyt_P and I_Ca_cyt_P;
  enddef;
  def map between Calcium_Conc_md and Ca_Pump_Current for
    vars conc_Ca_md and conc_Ca_md;
    vars I_Ca_md_P and I_Ca_md_P;
  enddef;

  def comp CaL_Current as
    var I_Ca_cyt_L: ampere {pub: out};
    var I_Ca_md_L: ampere {pub: out};
    var G_CaL_max: siemens2 {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var d_L_cyt: dimensionless {pub: in};
    var d_L_md: dimensionless {pub: in};
    var f_L_cyt: dimensionless {pub: in};
    var f_L_md: dimensionless {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var E_Ca_cyt: volt {pub: in};
    var E_Ca_md: volt {pub: in};
    I_Ca_cyt_L = G_CaL_max*f_cyt*d_L_cyt*f_L_cyt*(V_m_cyt-E_Ca_cyt);
    I_Ca_md_L = G_CaL_max*f_md*d_L_md*f_L_md*(V_m_md-E_Ca_md);
  enddef;
  def map between Calcium_Conc_cyt and CaL_Current for
    vars I_Ca_cyt_L and I_Ca_cyt_L;
  enddef;
  def map between Calcium_Conc_md and CaL_Current for
    vars I_Ca_md_L and I_Ca_md_L;
  enddef;
  def map between Parameters and CaL_Current for
    vars G_CaL_max and G_CaL_max;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Nernst_Potentials and CaL_Current for
    vars E_Ca_cyt and E_Ca_cyt;
    vars E_Ca_md and E_Ca_md;
  enddef;

  def comp CaL_Activations as
    var f_L_cyt: dimensionless {pub: out};
    var f_L_md: dimensionless {pub: out};
    var d_L_cyt: dimensionless {init: 3.7841E-5, pub: out};
    var d_L_md: dimensionless {init: 4.9277E-5, pub: out};
    var f_F_cyt: dimensionless {init: 1};
    var f_F_md: dimensionless {init: 1};
    var d_bar_L_cyt: dimensionless;
    var d_bar_L_md: dimensionless;
    var f_bar_F_cyt: dimensionless;
    var f_bar_F_md: dimensionless;
    var Tau_d_cyt: second {pub: in};
    var Tau_d_md: second {pub: in};
    f_L_cyt = 0.74{dimensionless}*f_F_cyt+0.26{dimensionless};
    f_L_md = 0.74{dimensionless}*f_F_md+0.26{dimensionless};
    ode(d_L_cyt, time) = (d_bar_L_cyt-d_L_cyt)/Tau_d_cyt;
    ode(d_L_md, time) = (d_bar_L_md-d_L_md)/Tau_d_md;
    ode(f_F_cyt, time) = (f_bar_F_cyt-f_F_cyt)/Tau_f_cyt;
    ode(f_F_md, time) = (f_bar_F_md-f_F_md)/Tau_f_md;
    d_bar_L_cyt = 1{dimensionless}/(1{dimensionless}+exp(-(V_m_cyt+0.00188{volt})/0.00757{volt}));
    d_bar_L_md = 1{dimensionless}/(1{dimensionless}+exp(-(V_m_md+0.00188{volt})/0.00757{volt}));
    f_bar_F_md = 1{dimensionless}/(1{dimensionless}+exp((V_m_md+0.02932{volt})/0.00154{volt}));
    f_bar_F_cyt = 1{dimensionless}/(1{dimensionless}+exp((V_m_cyt+0.02932{volt})/0.00154{volt}));
    var Tau_f_cyt: second {pub: in};
    var Tau_f_md: second {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var time: second {pub: in};
  enddef;

  def comp CaL_Time_Constants as
    var Tau_d_cyt: second {pub: out};
    var Tau_d_md: second {pub: out};
    var Tau_f_cyt: second {pub: out};
    var Tau_f_md: second {pub: out};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    Tau_d_cyt = 0.00289{second}*exp(-sqr((V_m_cyt+0.00863{volt})/0.01239{volt}))+0.00243{second};
    Tau_d_md = 0.0289{second}*exp(-sqr((V_m_md+0.00863{volt})/0.01239{volt}))+0.00243{second};
    Tau_f_cyt = 0.29559{second}*exp(-sqr((V_m_cyt-0.00472{volt})/0.11255{volt}))+0.02319{second};
    Tau_f_md = 0.29559{second}*exp(-sqr((V_m_md-0.00472{volt})/0.11255{volt}))+0.02319{second};
  enddef;
  def map between Environment and CaL_Activations for
    vars time and time;
  enddef;
  def map between CaL_Current and CaL_Activations for
    vars d_L_cyt and d_L_cyt;
    vars d_L_md and d_L_md;
    vars f_L_cyt and f_L_cyt;
    vars f_L_md and f_L_md;
  enddef;
  def map between CaL_Activations and CaL_Time_Constants for
    vars Tau_d_cyt and Tau_d_cyt;
    vars Tau_d_md and Tau_d_md;
    vars Tau_f_cyt and Tau_f_cyt;
    vars Tau_f_md and Tau_f_md;
  enddef;

  def comp Calseq_Kinetics as
    var conc_CalseqCa_IP3R: Molar {init: 5.7849E-2, pub: out};
    var conc_CalseqCa_RyR: Molar {init: 5.3239E-2, pub: out};
    var k_Calseq_on: per_M_sec {pub: in};
    var k_Calseq_off: per_sec {pub: in};
    var conc_Ca_IP3R: Molar {pub: in};
    var conc_Ca_RyR: Molar {pub: in};
    var conc_Calseq_SR_tot: Molar {pub: in};
    var time: second {pub: in};
    ode(conc_CalseqCa_IP3R, time) = k_Calseq_on*conc_Ca_IP3R*(conc_Calseq_SR_tot-conc_CalseqCa_IP3R)-k_Calseq_off*conc_CalseqCa_IP3R;
    ode(conc_CalseqCa_RyR, time) = k_Calseq_on*conc_Ca_RyR*(conc_Calseq_SR_tot-conc_CalseqCa_RyR)-k_Calseq_off*conc_CalseqCa_RyR;
  enddef;
  def map between Environment and Calseq_Kinetics for
    vars time and time;
  enddef;
  def map between Parameters and Calseq_Kinetics for
    vars conc_Calseq_SR_tot and conc_Calseq_SR_tot;
    vars k_Calseq_on and k_Calseq_on;
    vars k_Calseq_off and k_Calseq_off;
  enddef;
  def map between Calcium_Conc_SR and Calseq_Kinetics for
    vars conc_Ca_IP3R and conc_Ca_IP3R;
    vars conc_Ca_RyR and conc_Ca_RyR;
    vars conc_CalseqCa_IP3R and conc_CalseqCa_IP3R;
    vars conc_CalseqCa_RyR and conc_CalseqCa_RyR;
  enddef;

  def comp Md_Cyt_Flux_K as
    var J_Kdiff: mol_per_sec {pub: out};
    var Xi_K: dimensionless;
    var P_K_diff: m_per_sec;
    var conc_K_cyt: Molar {pub: in};
    var conc_K_md: Molar {pub: in};
    var F: sec_A_per_mol {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var hcon: dimensionless {pub: in};
    var z_K: dimensionless {init: 1};
    var D_K: sq_m_per_sec {pub: in};
    var L: meter {pub: in};
    J_Kdiff = sel
      case V_m_md-V_m_cyt == 0{volt}:
        Volsec*(conc_K_md-conc_K_cyt);
      otherwise:
        Volsec*Xi_K*((conc_K_md-conc_K_cyt*exp(-Xi_K))/(1{dimensionless}-exp(-Xi_K)));
    endsel;
    Xi_K = z_K*F/(R*T)*(V_m_md-V_m_cyt);
    P_K_diff = hcon*D_K/L;
    Volsec = DiffArea*P_K_diff;
    var Volsec: cubic_m_per_sec;
    var DiffArea: sq_meter {init: 7.7598E-13};
  enddef;
  def unit sq_meter as
    unit meter {expo: 2};
  enddef;
  def unit A_sec_per_V as
    unit ampere;
    unit second;
    unit volt {expo: -1};
  enddef;
  def unit sq_m_per_sec as
    unit meter {expo: 2};
    unit second {expo: -1};
  enddef;
  def map between Parameters and Md_Cyt_Flux_K for
    vars F and F;
    vars R and R;
    vars T and T;
    vars L and L;
    vars hcon and hcon;
    vars D_K and D_K;
  enddef;
  def map between Potassium_Conc_cyt and Md_Cyt_Flux_K for
    vars conc_K_cyt and conc_K_cyt;
    vars J_Kdiff and J_Kdiff;
  enddef;
  def map between Potassium_Conc_md and Md_Cyt_Flux_K for
    vars conc_K_md and conc_K_md;
    vars J_Kdiff and J_Kdiff;
  enddef;

  def comp Md_Cyt_Flux_Na as
    var J_Nadiff: mol_per_sec {pub: out};
    var Xi_Na: dimensionless;
    var P_Na_diff: m_per_sec;
    var conc_Na_cyt: Molar {pub: in};
    var conc_Na_md: Molar {pub: in};
    var F: sec_A_per_mol {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var hcon: dimensionless {pub: in};
    var z_Na: dimensionless {init: 1};
    var D_Na: sq_m_per_sec {pub: in};
    var L: meter {pub: in};
    J_Nadiff = sel
      case V_m_md-V_m_cyt == 0{volt}:
        Volsec*(conc_Na_md-conc_Na_cyt);
      otherwise:
        Volsec*Xi_Na*((conc_Na_md-conc_Na_cyt*exp(-Xi_Na))/(1{dimensionless}-exp(-Xi_Na)));
    endsel;
    Xi_Na = z_Na*F/(R*T)*(V_m_md-V_m_cyt);
    P_Na_diff = hcon*D_Na/L;
    Volsec = DiffArea*P_Na_diff;
    var Volsec: cubic_m_per_sec;
    var DiffArea: sq_meter {init: 7.7598E-13};
  enddef;

  def comp Md_Cyt_Flux_Ca as
    var J_Cadiff: mol_per_sec {pub: out};
    var Xi_Ca: dimensionless;
    var P_Ca_diff: m_per_sec;
    var conc_Ca_cyt: Molar {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var F: sec_A_per_mol {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var hcon: dimensionless {pub: in};
    var z_Ca: dimensionless {init: 2};
    var D_Ca: sq_m_per_sec {pub: in};
    var L: meter {pub: in};
    J_Cadiff = sel
      case V_m_md-V_m_cyt == 0{volt}:
        Volsec*(conc_Ca_md-conc_Ca_cyt);
      otherwise:
        Volsec*Xi_Ca*((conc_Ca_md-conc_Ca_cyt*exp(-Xi_Ca))/(1{dimensionless}-exp(-Xi_Ca)));
    endsel;
    Xi_Ca = z_Ca*F/(R*T)*(V_m_md-V_m_cyt);
    P_Ca_diff = hcon*D_Ca/L;
    Volsec = DiffArea*P_Ca_diff;
    var Volsec: cubic_m_per_sec;
    var DiffArea: sq_meter {init: 7.7598E-13};
  enddef;
  def map between Parameters and Md_Cyt_Flux_Na for
    vars F and F;
    vars R and R;
    vars T and T;
    vars L and L;
    vars hcon and hcon;
    vars D_Na and D_Na;
  enddef;
  def map between Sodium_Conc_cyt and Md_Cyt_Flux_Na for
    vars conc_Na_cyt and conc_Na_cyt;
    vars J_Nadiff and J_Nadiff;
  enddef;
  def map between Sodium_Conc_md and Md_Cyt_Flux_Na for
    vars conc_Na_md and conc_Na_md;
    vars J_Nadiff and J_Nadiff;
  enddef;
  def map between Calcium_Conc_cyt and Md_Cyt_Flux_Ca for
    vars conc_Ca_cyt and conc_Ca_cyt;
    vars J_Cadiff and J_Cadiff;
  enddef;
  def map between Parameters and Md_Cyt_Flux_Ca for
    vars F and F;
    vars R and R;
    vars T and T;
    vars L and L;
    vars hcon and hcon;
    vars D_Ca and D_Ca;
  enddef;
  def map between Calcium_Conc_md and Md_Cyt_Flux_Ca for
    vars conc_Ca_md and conc_Ca_md;
    vars J_Cadiff and J_Cadiff;
  enddef;

  def comp Md_Cyt_Flux_Cl as
    var J_Cldiff: mol_per_sec {pub: out};
    var Xi_Cl: dimensionless;
    var P_Cl_diff: m_per_sec;
    var conc_Cl_cyt: Molar {pub: in};
    var conc_Cl_md: Molar {pub: in};
    var F: sec_A_per_mol {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    var V_m_cyt: volt {pub: in};
    var V_m_md: volt {pub: in};
    var hcon: dimensionless {pub: in};
    var z_Cl: dimensionless {init: -1};
    var D_Cl: sq_m_per_sec {pub: in};
    var L: meter {pub: in};
    J_Cldiff = sel
      case V_m_md-V_m_cyt == 0{volt}:
        Volsec*(conc_Cl_md-conc_Cl_cyt);
      otherwise:
        Volsec*Xi_Cl*((conc_Cl_md-conc_Cl_cyt*exp(-Xi_Cl))/(1{dimensionless}-exp(-Xi_Cl)));
    endsel;
    Xi_Cl = z_Cl*F/(R*T)*(V_m_md-V_m_cyt);
    P_Cl_diff = hcon*D_Cl/L;
    Volsec = DiffArea*P_Cl_diff;
    var Volsec: cubic_m_per_sec;
    var DiffArea: sq_meter {init: 7.7598E-13};
  enddef;
  def map between Parameters and Md_Cyt_Flux_Cl for
    vars F and F;
    vars R and R;
    vars T and T;
    vars L and L;
    vars hcon and hcon;
    vars D_Cl and D_Cl;
  enddef;
  def map between Chloride_Conc_md and Md_Cyt_Flux_Cl for
    vars conc_Cl_md and conc_Cl_md;
    vars J_Cldiff and J_Cldiff;
  enddef;
  def map between Chloride_Conc_cyt and Md_Cyt_Flux_Cl for
    vars conc_Cl_cyt and conc_Cl_cyt;
    vars J_Cldiff and J_Cldiff;
  enddef;

  def comp Membrane_Potential_Cyt as
    var I_cyt_tot: ampere {pub: out};
    var I_K_cyt_b: ampere {pub: in};
    var I_K_cyt_ir: ampere {pub: in};
    var I_K_cyt_ATP: ampere {pub: in};
    var I_K_cyt_v: ampere {pub: in};
    var I_K_cyt_Ca: ampere {pub: in};
    var J_Kdiff: mol_per_sec {pub: in};
    var I_NaK_cyt_alpha1: ampere {pub: in};
    var I_Na_cyt_b: ampere {pub: in};
    var I_VONa_cyt: ampere {pub: in};
    var I_Na_cyt_SOC: ampere {pub: in};
    var J_Nadiff: mol_per_sec {pub: in};
    var I_Cl_cyt_b: ampere {pub: in};
    var I_Cl_cyt_Ca: ampere {pub: in};
    var J_Cldiff: mol_per_sec {pub: in};
    var I_Ca_cyt_b: ampere {pub: in};
    var J_Cadiff: mol_per_sec {pub: in};
    var I_Ca_cyt_P: ampere {pub: in};
    var I_Ca_cyt_L: ampere {pub: in};
    var I_Ca_cyt_SOC: ampere {pub: in};
    var I_cyt_SERCa_IP3R: ampere {pub: in};
    var I_cyt_SERCa_RyR: ampere {pub: in};
    var I_cyt_IP3R: ampere {pub: in};
    var I_cyt_RyR: ampere {pub: in};
    I_cyt_tot = I_K_cyt_b+I_K_cyt_ir+I_K_cyt_ATP+I_K_cyt_v+I_K_cyt_Ca-F*J_Kdiff+I_NaK_cyt_alpha1+I_Na_cyt_b+I_VONa_cyt+I_Na_cyt_SOC-F*J_Nadiff+I_Cl_cyt_b+I_Cl_cyt_Ca+F*J_Cldiff+I_Ca_cyt_b+I_Ca_cyt_P+I_Ca_cyt_L+I_Ca_cyt_SOC-2{dimensionless}*F*J_Cadiff+I_cyt_up-I_cyt_RyR-I_cyt_IP3R;
    I_cyt_up = I_cyt_SERCa_IP3R+I_cyt_SERCa_RyR;
    var F: sec_A_per_mol {pub: in};
    var I_cyt_up: ampere;
  enddef;

  def comp Membrane_Voltage as
    var V_m_cyt: volt {init: -7.8960E-2, pub: out};
    var V_m_md: volt {init: -7.6961E-2, pub: out};
    var I_cyt_tot: ampere {pub: in};
    var I_md_tot: ampere {pub: in};
    var f_cyt: dimensionless {pub: in};
    var f_md: dimensionless {pub: in};
    var C_m: farad2 {init: 1.2100E-11};
    ode(V_m_cyt, time) = -I_cyt_tot/(f_cyt*C_m);
    ode(V_m_md, time) = -I_md_tot/(f_md*C_m);
    var time: second {pub: in};
  enddef;

  def comp Membrane_Potential_md as
    var I_md_tot: ampere {pub: out};
    var I_K_md_b: ampere {pub: in};
    var I_K_md_ir: ampere {pub: in};
    var I_K_md_ATP: ampere {pub: in};
    var I_K_md_v: ampere {pub: in};
    var I_K_md_Ca: ampere {pub: in};
    var J_Kdiff: mol_per_sec {pub: in};
    var I_NaK_md_alpha2: ampere {pub: in};
    var I_Na_md_b: ampere {pub: in};
    var I_VONa_md: ampere {pub: in};
    var I_Na_md_SOC: ampere {pub: in};
    var J_Nadiff: mol_per_sec {pub: in};
    var I_Cl_md_b: ampere {pub: in};
    var I_Cl_md_Ca: ampere {pub: in};
    var J_Cldiff: mol_per_sec {pub: in};
    var I_Ca_md_b: ampere {pub: in};
    var J_Cadiff: mol_per_sec {pub: in};
    var I_Ca_md_P: ampere {pub: in};
    var I_Ca_md_L: ampere {pub: in};
    var I_Ca_md_SOC: ampere {pub: in};
    var I_md_SERCa_IP3R: ampere {pub: in};
    var I_md_SERCa_RyR: ampere {pub: in};
    var I_md_IP3R: ampere {pub: in};
    var I_md_RyR: ampere {pub: in};
    I_md_tot = I_K_md_b+I_K_md_ir+I_K_md_ATP+I_K_md_v+I_K_md_Ca+F*J_Kdiff+I_NaK_md_alpha2+I_Na_md_b+I_VONa_md+I_Na_md_SOC+I_NaCa_md+F*J_Nadiff+I_Cl_md_b+I_Cl_md_Ca-F*J_Cldiff+I_Ca_md_b+I_Ca_md_P+I_Ca_md_L+I_Ca_md_SOC+2{dimensionless}*F*J_Cadiff+I_md_up-I_md_RyR-I_md_IP3R;
    I_md_up = I_md_SERCa_IP3R+I_md_SERCa_RyR;
    var F: sec_A_per_mol {pub: in};
    var I_NaCa_md: ampere {pub: in};
    var I_md_up: ampere;
  enddef;
  def map between Parameters and Membrane_Potential_Cyt for
    vars F and F;
  enddef;
  def map between Background_Currents and Membrane_Potential_Cyt for
    vars I_K_cyt_b and I_K_cyt_b;
    vars I_Na_cyt_b and I_Na_cyt_b;
    vars I_Cl_cyt_b and I_Cl_cyt_b;
    vars I_Ca_cyt_b and I_Ca_cyt_b;
  enddef;
  def map between SERCA_Currents_IP3R and Membrane_Potential_Cyt for
    vars I_cyt_SERCa_IP3R and I_cyt_SERCa_IP3R;
  enddef;
  def map between SERCA_Currents_RyR and Membrane_Potential_Cyt for
    vars I_cyt_SERCa_RyR and I_cyt_SERCa_RyR;
  enddef;
  def map between RyR_Currents and Membrane_Potential_Cyt for
    vars I_cyt_RyR and I_cyt_RyR;
  enddef;
  def map between IP3R_Currents and Membrane_Potential_Cyt for
    vars I_cyt_IP3R and I_cyt_IP3R;
  enddef;
  def map between SOC_Current_Ca and Membrane_Potential_Cyt for
    vars I_Ca_cyt_SOC and I_Ca_cyt_SOC;
  enddef;
  def map between SOC_Current_Na and Membrane_Potential_Cyt for
    vars I_Na_cyt_SOC and I_Na_cyt_SOC;
  enddef;
  def map between ClCa_Current and Membrane_Potential_Cyt for
    vars I_Cl_cyt_Ca and I_Cl_cyt_Ca;
  enddef;
  def map between K_Inward_Rectifier_Current and Membrane_Potential_Cyt for
    vars I_K_cyt_ir and I_K_cyt_ir;
  enddef;
  def map between K_Delayed_Rectifier_Current and Membrane_Potential_Cyt for
    vars I_K_cyt_v and I_K_cyt_v;
  enddef;
  def map between K_ATP_Current and Membrane_Potential_Cyt for
    vars I_K_cyt_ATP and I_K_cyt_ATP;
  enddef;
  def map between K_Ca_Current and Membrane_Potential_Cyt for
    vars I_K_cyt_Ca and I_K_cyt_Ca;
  enddef;
  def map between NaK_alpha_Current and Membrane_Potential_Cyt for
    vars I_NaK_cyt_alpha1 and I_NaK_cyt_alpha1;
  enddef;
  def map between VONa_Current and Membrane_Potential_Cyt for
    vars I_VONa_cyt and I_VONa_cyt;
  enddef;
  def map between Ca_Pump_Current and Membrane_Potential_Cyt for
    vars I_Ca_cyt_P and I_Ca_cyt_P;
  enddef;
  def map between CaL_Current and Membrane_Potential_Cyt for
    vars I_Ca_cyt_L and I_Ca_cyt_L;
  enddef;
  def map between Md_Cyt_Flux_K and Membrane_Potential_Cyt for
    vars J_Kdiff and J_Kdiff;
  enddef;
  def map between Md_Cyt_Flux_Na and Membrane_Potential_Cyt for
    vars J_Nadiff and J_Nadiff;
  enddef;
  def map between Md_Cyt_Flux_Ca and Membrane_Potential_Cyt for
    vars J_Cadiff and J_Cadiff;
  enddef;
  def map between Membrane_Voltage and Membrane_Potential_Cyt for
    vars I_cyt_tot and I_cyt_tot;
  enddef;
  def map between Md_Cyt_Flux_Cl and Membrane_Potential_Cyt for
    vars J_Cldiff and J_Cldiff;
  enddef;
  def map between Parameters and Membrane_Potential_md for
    vars F and F;
  enddef;
  def map between Background_Currents and Membrane_Potential_md for
    vars I_K_md_b and I_K_md_b;
    vars I_Na_md_b and I_Na_md_b;
    vars I_Cl_md_b and I_Cl_md_b;
    vars I_Ca_md_b and I_Ca_md_b;
  enddef;
  def map between SERCA_Currents_IP3R and Membrane_Potential_md for
    vars I_md_SERCa_IP3R and I_md_SERCa_IP3R;
  enddef;
  def map between SERCA_Currents_RyR and Membrane_Potential_md for
    vars I_md_SERCa_RyR and I_md_SERCa_RyR;
  enddef;
  def map between IP3R_Currents and Membrane_Potential_md for
    vars I_md_IP3R and I_md_IP3R;
  enddef;
  def map between RyR_Currents and Membrane_Potential_md for
    vars I_md_RyR and I_md_RyR;
  enddef;
  def map between SOC_Current_Ca and Membrane_Potential_md for
    vars I_Ca_md_SOC and I_Ca_md_SOC;
  enddef;
  def map between SOC_Current_Na and Membrane_Potential_md for
    vars I_Na_md_SOC and I_Na_md_SOC;
  enddef;
  def map between ClCa_Current and Membrane_Potential_md for
    vars I_Cl_md_Ca and I_Cl_md_Ca;
  enddef;
  def map between K_Inward_Rectifier_Current and Membrane_Potential_md for
    vars I_K_md_ir and I_K_md_ir;
  enddef;
  def map between K_Delayed_Rectifier_Current and Membrane_Potential_md for
    vars I_K_md_v and I_K_md_v;
  enddef;
  def map between K_ATP_Current and Membrane_Potential_md for
    vars I_K_md_ATP and I_K_md_ATP;
  enddef;
  def map between K_Ca_Current and Membrane_Potential_md for
    vars I_K_md_Ca and I_K_md_Ca;
  enddef;
  def map between NaK_alpha_Current and Membrane_Potential_md for
    vars I_NaK_md_alpha2 and I_NaK_md_alpha2;
  enddef;
  def map between NCX_Current and Membrane_Potential_md for
    vars I_NaCa_md and I_NaCa_md;
  enddef;
  def map between VONa_Current and Membrane_Potential_md for
    vars I_VONa_md and I_VONa_md;
  enddef;
  def map between Ca_Pump_Current and Membrane_Potential_md for
    vars I_Ca_md_P and I_Ca_md_P;
  enddef;
  def map between Md_Cyt_Flux_K and Membrane_Potential_md for
    vars J_Kdiff and J_Kdiff;
  enddef;
  def map between Md_Cyt_Flux_Na and Membrane_Potential_md for
    vars J_Nadiff and J_Nadiff;
  enddef;
  def map between Md_Cyt_Flux_Ca and Membrane_Potential_md for
    vars J_Cadiff and J_Cadiff;
  enddef;
  def map between Md_Cyt_Flux_Cl and Membrane_Potential_md for
    vars J_Cldiff and J_Cldiff;
  enddef;
  def map between Membrane_Voltage and Membrane_Potential_md for
    vars I_md_tot and I_md_tot;
  enddef;
  def map between CaL_Current and Membrane_Potential_md for
    vars I_Ca_md_L and I_Ca_md_L;
  enddef;
  def map between Environment and Membrane_Voltage for
    vars time and time;
  enddef;
  def map between Parameters and Membrane_Voltage for
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Background_Currents and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between SOC_Current_Ca and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between SOC_Current_Na and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between ClCa_Current and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between K_Inward_Rectifier_Current and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between K_Delayed_Rectifier_Current and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between Kv_Activations and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between Kv_Time_Constants and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between K_ATP_Current and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between K_Ca_Current and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between KCa_Activations and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between NCX_Waveform and Membrane_Voltage for
    vars V_m_md and V_m_md;
  enddef;
  def map between NaK_alpha_Waveform and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between VONa_Current and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between VONa_Channels and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between CaL_Current and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between CaL_Activations and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between CaL_Time_Constants and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between Md_Cyt_Flux_K and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between Md_Cyt_Flux_Na and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between Md_Cyt_Flux_Ca and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between Md_Cyt_Flux_Cl and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between Calcium_Conc_cyt and Nernst_Potentials for
    vars conc_Ca_cyt and conc_Ca_cyt;
  enddef;
  def map between Cl_Channels_cyt and Cl_Channel_Rates for
    vars Beta_cyt and Beta_cyt;
  enddef;
  def map between Cl_Channels_md and Cl_Channel_Rates for
    vars Beta_md and Beta_md;
  enddef;
  def map between Membrane_Voltage and Cl_Channel_Rates for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def map between Nernst_Potentials and ClCa_Current for
    vars E_Cl_cyt and E_Cl_cyt;
    vars E_Cl_md and E_Cl_md;
  enddef;
  def map between Parameters and K_Delayed_Rectifier_Current for
    vars G_Kv_max and G_Kv_max;
    vars f_cyt and f_cyt;
    vars f_md and f_md;
  enddef;
  def map between Nernst_Potentials and K_Delayed_Rectifier_Current for
    vars E_K_cyt and E_K_cyt;
    vars E_K_md and E_K_md;
  enddef;
  def map between Nernst_Potentials and K_Ca_Current for
    vars E_K_cyt and E_K_cyt;
    vars E_K_md and E_K_md;
  enddef;
  def map between K_ir_Rates and Membrane_Voltage for
    vars V_m_cyt and V_m_cyt;
    vars V_m_md and V_m_md;
  enddef;
  def unit Molar as
    unit mole;
    unit cubic_Meter {expo: -1};
  enddef;
  def unit farad2 as
    unit ampere;
    unit second;
    unit volt {expo: -1};
  enddef;
  def unit M_fourpow as
    unit Molar {expo: 4};
  enddef;
  def unit Joule2 as
    unit volt;
    unit ampere;
    unit second;
  enddef;
  def unit siemens2 as
    unit ampere;
    unit volt {expo: -1};
  enddef;
  def unit cubic_m_per_sec as
    unit cubic_Meter;
    unit second {expo: -1};
  enddef;

  def comp Parameters_VR as
    var k_NO_O2: per_M_sec {init: 1.9E7, pub: out};
    var k_NO_cons: per_sec {init: 0.01, pub: out};
    var k_SOD_O2: per_M_sec {init: 1.6E6, pub: out};
    var k_cat: per_M_sec {init: 3.4E4, pub: out};
    var conc_SOD: Molar {init: 1E-3, pub: out};
    var conc_CAT: Molar {init: 20E-3, pub: out};
    var J_NO: mol_per_sq_m_sec {init: 2.8E-8, pub: out};
    var G_O2: M_per_sec {init: 4.5E-3, pub: out};
    var J_H2O2: mol_per_sq_m_sec {init: 6E-8, pub: out};
    var P_NO: m_per_sec {init: 3E-4, pub: out};
    var P_O2: m_per_sec {init: 6E-4, pub: out};
    var P_H2O2: m_per_sec {init: 6E-4, pub: out};
    var k_sGC_for: per_M_sec {init: 2E6, pub: out};
    var k_sGC_back: per_sec {init: 100, pub: out};
    var k2_sGC_for: per_sec {init: 0.1, pub: out};
    var k3_sCG_for: per_M_sec {init: 3E3, pub: out};
    var K4_sGC_for: per_M_sec {init: 98, pub: out};
    var V_sGC_max: M_per_sec {init: 1.09E-3, pub: out};
    var k_PDE: per_sec {init: 0.032, pub: out};
    var K_M_PDE: Molar {init: 2.0E-3, pub: out};
    var K_MLCP: Molar {init: 5.5E-3, pub: out};
    var K_SERCA: Molar {init: 5.0E-4, pub: out};
    var K_PMCA: Molar {init: 1.0E-3, pub: out};
    var K_KCa_cGMP: Molar {init: 5.5E-4, pub: out};
    var V_KCa_cGMP: volt {init: 66.9, pub: out};
    var K_KCa_NO: Molar {init: 2E-1, pub: out};
    var V_KCa_NO: volt {init: 100, pub: out};
    var V_Ca: volt {init: -53.7, pub: out};
    var V_B: volt {init: 283.7, pub: out};
    var k_KCa: volt {init: 30.8E-3, pub: out};
    var K_SERCA_O2: Molar {init: 2.0E-2, pub: out};
    var K_SERCA_H2O2: Molar {init: 6.6E-2, pub: out};
    var K_NaK_O2: Molar {init: 1.6E-3, pub: out};
    var K_NaK_H202: Molar {init: 0.56, pub: out};
    var K_MLCP_H2O2: Molar {init: 1E-3, pub: out};
    var alpha_MLCP: dimensionless {init: 4.0, pub: out};
    var k1_CAM_on: per_sq_M_sec {init: 2.8E6, pub: out};
    var k1_CAM_off: per_sec {init: 6, pub: out};
    var k2_CAM_on: per_sq_M_sec {init: 100E6, pub: out};
    var k2_CAM_off: per_sec {init: 800, pub: out};
    var k3_CAM_on: per_sq_M_sec {init: 2.8E6, pub: out};
    var k3_CAM_off: per_sec {init: 6.0, pub: out};
    var k4_CAM_on: per_sq_M_sec {init: 100E6, pub: out};
    var k4_CAM_off: per_sec {init: 800, pub: out};
    var k5_CAM_on: per_M_sec {init: 1000E3, pub: out};
    var k5_CAM_off: per_sec {init: 20, pub: out};
    var k6_CAM_on: per_sq_M_sec {init: 12.5E6, pub: out};
    var k6_CAM_off: per_sec {init: 5.0, pub: out};
    var k7_CAM_on: per_M_sec {init: 1000E3, pub: out};
    var k7_CAM_off: per_sec {init: 1, pub: out};
    var k_Myo_MLCK: per_M_sec {init: 4E3, pub: out};
    var k_Myo_MLCP: per_sec {init: 0.4, pub: out};
    var k3_Myo: per_sec {init: 1.8, pub: out};
    var k4_Myo: per_sec {init: 0.1, pub: out};
    var k7_Myo: per_sec {init: 0.045, pub: out};
    var conc_CaM_tot: Molar {init: 1.00E-2, pub: out};
    var conc_MLCK_tot: Molar {init: 2.0E-3, pub: out};
    var conc_Myo_tot: Molar {init: 30E-3, pub: out};
    var K_mf_rest: Molar {init: 3.0995E-4, pub: out};
    var I_PMCA_rest_max: ampere {init: 2.853E-12, pub: out};
    var I_SERCA_rest_max: ampere {init: 100E-12, pub: out};
    var I_NaK_alpha1_rest_max: ampere {init: 2.7225E-11, pub: out};
    var I_NaK_alpha2_rest_max: ampere {init: 2.7225E-11, pub: out};
  enddef;
  def unit mol_per_sq_m_sec as
    unit mole;
    unit meter {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit M_per_sec as
    unit Molar;
    unit second {expo: -1};
  enddef;
  def unit per_sq_M_sec as
    unit Molar {expo: -2};
    unit second {expo: -1};
  enddef;

  def comp MLCK_Activation_CaM as
    var conc_CaM___: Molar {init: 7.9487E-3, pub: out};
    var conc_CaMN__: Molar {init: 1.1023E-5, pub: out};
    var conc_CaM_C_: Molar {init: 4.1154E-5, pub: out};
    var conc_CaM_CM: Molar {init: 1.9451E-3, pub: out};
    var conc_CaMNCM: Molar {init: 5.3950E-5, pub: out};
    var conc_CaMNC_: Molar {pub: out};
    var conc_CaM_tot: Molar {pub: in};
    var conc_MLCK_free: Molar;
    var conc_MLCK_tot: Molar {pub: in};
    var k1_CAM_on: per_sq_M_sec {pub: in};
    var k2_CAM_on: per_sq_M_sec {pub: in};
    var k3_CAM_on: per_sq_M_sec {pub: in};
    var k4_CAM_on: per_sq_M_sec {pub: in};
    var k5_CAM_on: per_M_sec {pub: in};
    var k6_CAM_on: per_sq_M_sec {pub: in};
    var k7_CAM_on: per_M_sec {pub: in};
    var k1_CAM_off: per_sec {pub: in};
    var k2_CAM_off: per_sec {pub: in};
    var k3_CAM_off: per_sec {pub: in};
    var k4_CAM_off: per_sec {pub: in};
    var k5_CAM_off: per_sec {pub: in};
    var k6_CAM_off: per_sec {pub: in};
    var k7_CAM_off: per_sec {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var time: second {pub: in};
    ode(conc_CaM___, time) = -k1_CAM_on*sqr(conc_Ca_cyt)*conc_CaM___+k1_CAM_off*conc_CaM_C_-k2_CAM_on*sqr(conc_Ca_cyt)*conc_CaM___+k2_CAM_off*conc_CaMN__;
    ode(conc_CaMN__, time) = k2_CAM_on*sqr(conc_Ca_cyt)*conc_CaM___-k2_CAM_off*conc_CaMN__-k3_CAM_on*sqr(conc_Ca_cyt)*conc_CaMN__+k3_CAM_off*conc_CaMNC_;
    ode(conc_CaM_C_, time) = k1_CAM_on*sqr(conc_Ca_cyt)*conc_CaM___-k1_CAM_off*conc_CaM_C_-k4_CAM_on*sqr(conc_Ca_cyt)*conc_CaM_C_+k4_CAM_off*conc_CaMNC_-k5_CAM_on*conc_MLCK_free*conc_CaM_C_+k5_CAM_off*conc_CaM_CM;
    ode(conc_CaM_CM, time) = k5_CAM_on*conc_MLCK_free*conc_CaM_C_-k5_CAM_off*conc_CaM_CM-k6_CAM_on*sqr(conc_Ca_cyt)*conc_CaM_CM+k6_CAM_off*conc_CaMNCM;
    ode(conc_CaMNCM, time) = k6_CAM_on*sqr(conc_Ca_cyt)*conc_CaM_CM-k6_CAM_off*conc_CaMNCM+k7_CAM_on*conc_MLCK_free*conc_CaMNC_-k7_CAM_off*conc_CaMNCM;
    conc_CaMNC_ = conc_CaM_tot-(conc_CaM___+conc_CaMN__+conc_CaM_C_+conc_CaM_CM+conc_CaMNCM);
    conc_MLCK_free = conc_MLCK_tot-(conc_CaM_CM+conc_CaMNCM);
  enddef;
  def map between Parameters_VR and MLCK_Activation_CaM for
    vars k1_CAM_on and k1_CAM_on;
    vars k1_CAM_off and k1_CAM_off;
    vars k2_CAM_on and k2_CAM_on;
    vars k2_CAM_off and k2_CAM_off;
    vars k3_CAM_on and k3_CAM_on;
    vars k3_CAM_off and k3_CAM_off;
    vars k4_CAM_on and k4_CAM_on;
    vars k4_CAM_off and k4_CAM_off;
    vars k5_CAM_on and k5_CAM_on;
    vars k5_CAM_off and k5_CAM_off;
    vars k6_CAM_on and k6_CAM_on;
    vars k6_CAM_off and k6_CAM_off;
    vars k7_CAM_on and k7_CAM_on;
    vars k7_CAM_off and k7_CAM_off;
    vars conc_MLCK_tot and conc_MLCK_tot;
    vars conc_CaM_tot and conc_CaM_tot;
  enddef;
  def map between Environment and MLCK_Activation_CaM for
    vars time and time;
  enddef;
  def map between Calcium_Conc_cyt and MLCK_Activation_CaM for
    vars conc_Ca_cyt and conc_Ca_cyt;
    vars conc_CaMN__ and conc_CaMN__;
    vars conc_CaM_C_ and conc_CaM_C_;
    vars conc_CaM_CM and conc_CaM_CM;
    vars conc_CaMNCM and conc_CaMNCM;
    vars conc_CaM___ and conc_CaM___;
  enddef;

  def comp MLCK_Phospho_Myosin as
    var conc_Myo: Molar {init: 8.0265E-3};
    var conc_MyoP: Molar {init: 6.3288E-4, pub: out};
    var conc_AMyo: Molar {init: 1.8089E-2, pub: out};
    var conc_AMyoP: Molar {pub: out};
    var conc_Myo_tot: Molar {pub: in};
    var k1_6_Myo: per_sec {pub: in};
    var k2_Myo: per_sec {pub: in};
    var k3_Myo: per_sec {pub: in};
    var k4_Myo: per_sec {pub: in};
    var k5_Myo: per_sec {pub: in};
    var k7_Myo: per_sec {pub: in};
    var time: second {pub: in};
    ode(conc_Myo, time) = -k1_6_Myo*conc_Myo+k2_Myo*conc_MyoP+k7_Myo*conc_AMyo;
    ode(conc_MyoP, time) = k1_6_Myo*conc_Myo-k2_Myo*conc_MyoP-k3_Myo*conc_MyoP+k4_Myo*conc_AMyoP;
    ode(conc_AMyo, time) = -k7_Myo*conc_AMyo+k5_Myo*conc_AMyoP-k1_6_Myo*conc_AMyo;
    conc_AMyoP = conc_Myo_tot-(conc_Myo+conc_MyoP+conc_AMyo);
  enddef;

  def comp MLCP_Rate_Constants as
    var k1_6_Myo: per_sec {pub: out};
    var k2_Myo: per_sec {pub: out};
    var k5_Myo: per_sec {pub: out};
    var k_Myo_MLCP: per_sec {pub: in};
    var K_M_cGMP: Molar {init: 5.5E-3};
    var conc_cGMP: Molar {pub: in};
    var k_Myo_MLCK: per_M_sec {pub: in};
    var conc_CaMNCM: Molar {pub: in};
    k1_6_Myo = k_Myo_MLCK*conc_CaMNCM;
    k2_Myo = k_Myo_MLCP*(1{dimensionless}+3.65{dimensionless}*(sqr(conc_cGMP)/(sqr(K_M_cGMP)+sqr(conc_cGMP))))/R_MLCP;
    k5_Myo = k2_Myo;
    R_MLCP = 1{dimensionless}+alpha_MLCP*(sqr(conc_H2O2_cyt)/(sqr(K_MLCP_H2O2)+sqr(conc_H2O2_cyt)));
    var R_MLCP: dimensionless;
    var conc_H2O2_cyt: Molar {pub: in};
    var alpha_MLCP: dimensionless {pub: in};
    var K_MLCP_H2O2: Molar {pub: in};
  enddef;
  def map between Environment and MLCK_Phospho_Myosin for
    vars time and time;
  enddef;
  def map between Parameters_VR and MLCK_Phospho_Myosin for
    vars k3_Myo and k3_Myo;
    vars k4_Myo and k4_Myo;
    vars k7_Myo and k7_Myo;
    vars conc_Myo_tot and conc_Myo_tot;
  enddef;
  def map between MLCK_Phospho_Myosin and MLCP_Rate_Constants for
    vars k1_6_Myo and k1_6_Myo;
    vars k2_Myo and k2_Myo;
    vars k5_Myo and k5_Myo;
  enddef;
  def map between Parameters_VR and MLCP_Rate_Constants for
    vars k_Myo_MLCK and k_Myo_MLCK;
    vars k_Myo_MLCP and k_Myo_MLCP;
    vars K_MLCP_H2O2 and K_MLCP_H2O2;
    vars alpha_MLCP and alpha_MLCP;
  enddef;

  def comp NO_Kinetics as
    var conc_NO_cyt: Molar {init: 9.2798E-5, pub: out};
    var conc_O2_cyt: Molar {pub: in};
    var k_NO_O2: per_M_sec {pub: in};
    var k_NO_cons: per_sec {pub: in};
    var J_NO: mol_per_sq_m_sec {pub: in};
    var P_NO: m_per_sec {pub: in};
    var vol_cyt: cubic_Meter {pub: in};
    var Area: sq_meter {pub: in};
    var time: second {pub: in};
    ode(conc_NO_cyt, time) = Area/(2{dimensionless}*vol_cyt)*(J_NO-P_NO*conc_NO_cyt)-k_NO_O2*conc_NO_cyt*conc_O2_cyt-k_NO_cons*conc_NO_cyt;
  enddef;
  def map between Environment and NO_Kinetics for
    vars time and time;
  enddef;
  def map between Parameters and NO_Kinetics for
    vars vol_cyt and vol_cyt;
    vars Area and Area;
  enddef;
  def map between Parameters_VR and NO_Kinetics for
    vars k_NO_O2 and k_NO_O2;
    vars k_NO_cons and k_NO_cons;
    vars J_NO and J_NO;
    vars P_NO and P_NO;
  enddef;

  def comp O2_Kinetics as
    var conc_NO_cyt: Molar {pub: in};
    var conc_O2_cyt: Molar {init: 8.3402E-7, pub: out};
    var k_NO_O2: per_M_sec {pub: in};
    var k_SOD_O2: per_M_sec {pub: in};
    var J_NO: mol_per_sq_m_sec {pub: in};
    var P_O2: m_per_sec {pub: in};
    var vol_cyt: cubic_Meter {pub: in};
    var Area: sq_meter {pub: in};
    var time: second {pub: in};
    ode(conc_O2_cyt, time) = G_O2-Area/(2{dimensionless}*vol_cyt)*P_O2*conc_O2_cyt*(zeta/(1{dimensionless}-exp(-zeta)))-k_NO_O2*conc_NO_cyt*conc_O2_cyt-k_SOD_O2*conc_SOD*conc_O2_cyt;
    var conc_SOD: Molar {pub: in};
    var G_O2: M_per_sec {pub: in};
    var zeta: dimensionless {pub: in};
  enddef;
  def map between Environment and O2_Kinetics for
    vars time and time;
  enddef;
  def map between Parameters and O2_Kinetics for
    vars vol_cyt and vol_cyt;
    vars Area and Area;
  enddef;
  def map between Parameters_VR and O2_Kinetics for
    vars k_NO_O2 and k_NO_O2;
    vars k_SOD_O2 and k_SOD_O2;
    vars J_NO and J_NO;
    vars G_O2 and G_O2;
    vars P_O2 and P_O2;
    vars conc_SOD and conc_SOD;
  enddef;
  def map between NO_Kinetics and O2_Kinetics for
    vars conc_NO_cyt and conc_NO_cyt;
    vars conc_O2_cyt and conc_O2_cyt;
  enddef;

  def comp Zeta as
    var zeta: dimensionless {pub: out};
    var F: sec_A_per_mol {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    var V_m_cyt: volt {pub: in};
    zeta = -F*V_m_cyt/(R*T);
  enddef;
  def map between Parameters and Zeta for
    vars F and F;
    vars R and R;
    vars T and T;
  enddef;
  def map between Membrane_Voltage and Zeta for
    vars V_m_cyt and V_m_cyt;
  enddef;
  def map between O2_Kinetics and Zeta for
    vars zeta and zeta;
  enddef;

  def comp H2O2_Kinetics as
    var conc_H2O2_cyt: Molar {init: 5.0006E-5, pub: out};
    var conc_O2_cyt: Molar {pub: in};
    var k_cat: per_M_sec {pub: in};
    var k_SOD_O2: per_M_sec {pub: in};
    var J_H2O2: mol_per_sq_m_sec {pub: in};
    var P_H2O2: m_per_sec {pub: in};
    var vol_cyt: cubic_Meter {pub: in};
    var Area: sq_meter {pub: in};
    var time: second {pub: in};
    ode(conc_H2O2_cyt, time) = Area/(2{dimensionless}*vol_cyt)*(J_H2O2-P_H2O2*conc_H2O2_cyt)+k_SOD_O2*conc_SOD*conc_O2_cyt-k_cat*conc_H2O2_cyt*conc_CAT;
    var conc_SOD: Molar {pub: in};
    var conc_CAT: Molar {pub: in};
  enddef;
  def map between Environment and H2O2_Kinetics for
    vars time and time;
  enddef;
  def map between Parameters and H2O2_Kinetics for
    vars vol_cyt and vol_cyt;
    vars Area and Area;
  enddef;
  def map between Parameters_VR and H2O2_Kinetics for
    vars k_SOD_O2 and k_SOD_O2;
    vars k_cat and k_cat;
    vars conc_SOD and conc_SOD;
    vars conc_CAT and conc_CAT;
    vars J_H2O2 and J_H2O2;
    vars P_H2O2 and P_H2O2;
  enddef;
  def map between O2_Kinetics and H2O2_Kinetics for
    vars conc_O2_cyt and conc_O2_cyt;
  enddef;

  def comp sGC_Activation as
    var conc_Eb: dimensionless {init: 0.27479};
    var conc_E6c: dimensionless;
    var conc_E5c: dimensionless {init: 0.21715, pub: out};
    var conc_NO_cyt: Molar {pub: in};
    var k_sGC_for: per_M_sec {pub: in};
    var k_sGC_back: per_sec {pub: in};
    var k2_sGC_for: per_sec {pub: in};
    var k3_sGC_for: per_M_sec {pub: in};
    var k4_sGC_for: per_sec;
    var time: second {pub: in};
    ode(conc_Eb, time) = -k_sGC_for*conc_Eb*conc_NO_cyt+k_sGC_back*conc_E6c+k4_sGC_for*conc_E5c;
    ode(conc_E5c, time) = k3_sGC_for*conc_E6c*conc_NO_cyt+k2_sGC_for*conc_E6c-k4_sGC_for*conc_E5c;
    conc_E6c = 1{dimensionless}-(conc_Eb+conc_E5c);
    k4_sGC_for = K4_sGC*conc_cGMP;
    var K4_sGC: per_M_sec {pub: in};
    var conc_cGMP: Molar {pub: in};
  enddef;
  def map between Environment and sGC_Activation for
    vars time and time;
  enddef;
  def map between Parameters_VR and sGC_Activation for
    vars k_sGC_for and k_sGC_for;
    vars k_sGC_back and k_sGC_back;
    vars k2_sGC_for and k2_sGC_for;
    vars K4_sGC_for and K4_sGC;
    vars k3_sCG_for and k3_sGC_for;
  enddef;
  def map between NO_Kinetics and sGC_Activation for
    vars conc_NO_cyt and conc_NO_cyt;
  enddef;

  def comp cGMP_Kinetics as
    var conc_cGMP: Molar {init: 9.0341E-3, pub: out};
    var conc_E5c: dimensionless {pub: in};
    var k_PDE: per_sec {pub: in};
    var V_sGC_max: M_per_sec {pub: in};
    var K_M_PDE: Molar {pub: in};
    var time: second {pub: in};
    ode(conc_cGMP, time) = V_sGC_max*conc_E5c-k_PDE*sqr(conc_cGMP)/(K_M_PDE+conc_cGMP);
  enddef;
  def map between Parameters_VR and cGMP_Kinetics for
    vars V_sGC_max and V_sGC_max;
    vars k_PDE and k_PDE;
    vars K_M_PDE and K_M_PDE;
  enddef;
  def map between Environment and cGMP_Kinetics for
    vars time and time;
  enddef;
  def map between sGC_Activation and cGMP_Kinetics for
    vars conc_E5c and conc_E5c;
    vars conc_cGMP and conc_cGMP;
  enddef;

  def comp cGMP_Ca_Interaction as
    var conc_cGMP: Molar {pub: in};
    var V_KCa_cyt: volt {pub: out};
    var V_Ca: volt {pub: in};
    var V_B: volt {pub: in};
    var V_KCa_NO: volt {pub: in};
    var V_KCa_cGMP: volt {pub: in};
    var conc_Ca_cyt: Molar {pub: in};
    var k_KCa: volt {pub: in};
    var K_KCa_NO: Molar {pub: in};
    var K_KCa_cGMP: Molar {pub: in};
    var conc_NO_cyt: Molar {pub: in};
    V_KCa_cyt = (V_Ca*log(conc_Ca_cyt/1{Molar})-V_B-V_KCa_NO*(conc_NO_cyt/(K_KCa_NO+conc_NO_cyt))-V_KCa_cGMP*(sqr(conc_cGMP)/(sqr(K_KCa_cGMP)+sqr(conc_cGMP))))*convert;
    V_KCa_md = (V_Ca*log(conc_Ca_md/1{Molar})-V_B-V_KCa_NO*(conc_NO_cyt/(K_KCa_NO+conc_NO_cyt))-V_KCa_cGMP*(sqr(conc_cGMP)/(sqr(K_KCa_cGMP)+sqr(conc_cGMP))))*convert;
    var conc_Ca_md: Molar {pub: in};
    var V_KCa_md: volt {pub: out};
    var convert: dimensionless {init: 1E-3};
  enddef;

  def comp SERCA_Activation as
    var K_mf: Molar {pub: out};
    var K_mf_rest: Molar {pub: in};
    var K_SERCA: Molar {pub: in};
    var conc_cGMP: Molar {pub: in};
    K_mf = K_mf_rest/K_mod*(1{dimensionless}-conc_cGMP/(2{dimensionless}*(K_SERCA+conc_cGMP)));
    var K_mod: dimensionless {init: 0.5263};
  enddef;
  def map between Parameters_VR and SERCA_Activation for
    vars K_SERCA and K_SERCA;
    vars K_mf_rest and K_mf_rest;
  enddef;
  def map between SERCA_Currents_IP3R and SERCA_Activation for
    vars K_mf and K_mf;
  enddef;
  def map between SERCA_Currents_RyR and SERCA_Activation for
    vars K_mf and K_mf;
  enddef;
  def map between cGMP_Kinetics and SERCA_Activation for
    vars conc_cGMP and conc_cGMP;
  enddef;

  def comp CaP_Current_Max as
    var I_CaP_max: ampere {pub: out};
    var I_PMCA_rest_max: ampere {pub: in};
    var K_PMCA: Molar {pub: in};
    var conc_cGMP: Molar {pub: in};
    I_CaP_max = I_PMCA_rest_max*(1{dimensionless}+3.6{dimensionless}*conc_cGMP/(K_PMCA+conc_cGMP));
  enddef;
  def map between Ca_Pump_Current and CaP_Current_Max for
    vars I_CaP_max and I_CaP_max;
  enddef;
  def map between Parameters_VR and CaP_Current_Max for
    vars I_PMCA_rest_max and I_PMCA_rest_max;
    vars K_PMCA and K_PMCA;
  enddef;
  def map between cGMP_Kinetics and CaP_Current_Max for
    vars conc_cGMP and conc_cGMP;
  enddef;

  def comp ROS_SERCA_Interaction as
    var theta_SERCA_O2: dimensionless;
    var conc_O2_cyt: Molar {pub: in};
    var K_SERCA_O2: Molar {pub: in};
    var theta_SERCA_H2O2: dimensionless;
    var conc_H2O2_cyt: Molar {pub: in};
    var K_SERCA_H2O2: Molar {pub: in};
    theta_SERCA_O2 = sqrt(conc_O2_cyt)/(sqrt(K_SERCA_O2)+sqrt(conc_O2_cyt));
    theta_SERCA_H2O2 = conc_H2O2_cyt/(K_SERCA_H2O2+conc_H2O2_cyt);
    I_SERCA_max = I_SERCA_rest_max*(1{dimensionless}-theta_SERCA_O2)*(1{dimensionless}-theta_SERCA_H2O2);
    var I_SERCA_max: ampere {pub: out};
    var I_SERCA_rest_max: ampere {pub: in};
  enddef;
  def map between Parameters_VR and ROS_SERCA_Interaction for
    vars K_SERCA_O2 and K_SERCA_O2;
    vars K_SERCA_H2O2 and K_SERCA_H2O2;
    vars I_SERCA_rest_max and I_SERCA_rest_max;
  enddef;
  def map between SERCA_Currents_IP3R and ROS_SERCA_Interaction for
    vars I_SERCA_max and I_SERCA_max;
  enddef;
  def map between SERCA_Currents_RyR and ROS_SERCA_Interaction for
    vars I_SERCA_max and I_SERCA_max;
  enddef;
  def map between O2_Kinetics and ROS_SERCA_Interaction for
    vars conc_O2_cyt and conc_O2_cyt;
  enddef;
  def map between H2O2_Kinetics and ROS_SERCA_Interaction for
    vars conc_H2O2_cyt and conc_H2O2_cyt;
  enddef;

  def comp ROS_NaK_Interaction as
    var I_NaK_alpha1_max: ampere {pub: out};
    var I_NaK_alpha1_rest_max: ampere {pub: in};
    var conc_O2_cyt: Molar {pub: in};
    var conc_H2O2_cyt: Molar {pub: in};
    var K_NaK_H2O2: Molar {pub: in};
    var K_NaK_O2: Molar {pub: in};
    I_NaK_alpha1_max = I_NaK_alpha1_rest_max*(1{dimensionless}-conc_O2_cyt/(K_NaK_O2+conc_O2_cyt))*(1{dimensionless}-conc_H2O2_cyt/(K_NaK_H2O2+conc_H2O2_cyt));
  enddef;
  def map between Parameters_VR and ROS_NaK_Interaction for
    vars I_NaK_alpha1_rest_max and I_NaK_alpha1_rest_max;
    vars K_NaK_O2 and K_NaK_O2;
    vars K_NaK_H202 and K_NaK_H2O2;
  enddef;
  def map between NaK_alpha_Current and ROS_NaK_Interaction for
    vars I_NaK_alpha1_max and I_NaK_alpha1_max;
  enddef;
  def map between O2_Kinetics and ROS_NaK_Interaction for
    vars conc_O2_cyt and conc_O2_cyt;
  enddef;
  def map between ROS_NaK_Interaction and H2O2_Kinetics for
    vars conc_H2O2_cyt and conc_H2O2_cyt;
  enddef;
  def map between MLCP_Rate_Constants and cGMP_Kinetics for
    vars conc_cGMP and conc_cGMP;
  enddef;
  def map between MLCP_Rate_Constants and MLCK_Activation_CaM for
    vars conc_CaMNCM and conc_CaMNCM;
  enddef;
  def map between cGMP_Kinetics and cGMP_Ca_Interaction for
    vars conc_cGMP and conc_cGMP;
  enddef;
  def map between cGMP_Ca_Interaction and Parameters_VR for
    vars K_KCa_NO and K_KCa_NO;
    vars V_Ca and V_Ca;
    vars V_B and V_B;
    vars k_KCa and k_KCa;
    vars V_KCa_NO and V_KCa_NO;
    vars V_KCa_cGMP and V_KCa_cGMP;
    vars K_KCa_cGMP and K_KCa_cGMP;
  enddef;
  def map between Calcium_Conc_cyt and cGMP_Ca_Interaction for
    vars conc_Ca_cyt and conc_Ca_cyt;
  enddef;
  def map between NO_Kinetics and cGMP_Ca_Interaction for
    vars conc_NO_cyt and conc_NO_cyt;
  enddef;
  def map between KCa_Activations and cGMP_Ca_Interaction for
    vars V_KCa_cyt and V_KCa_cyt;
    vars V_KCa_md and V_KCa_md;
  enddef;
  def map between Calcium_Conc_md and cGMP_Ca_Interaction for
    vars conc_Ca_md and conc_Ca_md;
  enddef;

  def comp MLCK_Activation_CaM_md as
    var conc_CaM___: Molar {init: 7.3876E-3};
    var conc_CaMN__: Molar {init: 1.2766E-4, pub: out};
    var conc_CaM_C_: Molar {init: 4.7661E-4, pub: out};
    var conc_CaM_CM: Molar {init: 1.4863E-3, pub: out};
    var conc_CaMNCM: Molar {init: 5.1368E-4, pub: out};
    var conc_CaMNC_: Molar {pub: out};
    var conc_CaM_tot: Molar {pub: in};
    var conc_MLCK_free: Molar;
    var conc_MLCK_tot: Molar {pub: in};
    var k1_CAM_on: per_sq_M_sec {pub: in};
    var k2_CAM_on: per_sq_M_sec {pub: in};
    var k3_CAM_on: per_sq_M_sec {pub: in};
    var k4_CAM_on: per_sq_M_sec {pub: in};
    var k5_CAM_on: per_M_sec {pub: in};
    var k6_CAM_on: per_sq_M_sec {pub: in};
    var k7_CAM_on: per_M_sec {pub: in};
    var k1_CAM_off: per_sec {pub: in};
    var k2_CAM_off: per_sec {pub: in};
    var k3_CAM_off: per_sec {pub: in};
    var k4_CAM_off: per_sec {pub: in};
    var k5_CAM_off: per_sec {pub: in};
    var k6_CAM_off: per_sec {pub: in};
    var k7_CAM_off: per_sec {pub: in};
    var conc_Ca_md: Molar {pub: in};
    var time: second {pub: in};
    ode(conc_CaM___, time) = -k1_CAM_on*sqr(conc_Ca_md)*conc_CaM___+k1_CAM_off*conc_CaM_C_-k2_CAM_on*sqr(conc_Ca_md)*conc_CaM___+k2_CAM_off*conc_CaMN__;
    ode(conc_CaMN__, time) = k2_CAM_on*sqr(conc_Ca_md)*conc_CaM___-k2_CAM_off*conc_CaMN__-k3_CAM_on*sqr(conc_Ca_md)*conc_CaMN__+k3_CAM_off*conc_CaMNC_;
    ode(conc_CaM_C_, time) = k1_CAM_on*sqr(conc_Ca_md)*conc_CaM___-k1_CAM_off*conc_CaM_C_-k4_CAM_on*sqr(conc_Ca_md)*conc_CaM_C_+k4_CAM_off*conc_CaMNC_-k5_CAM_on*conc_MLCK_free*conc_CaM_C_+k5_CAM_off*conc_CaM_CM;
    ode(conc_CaM_CM, time) = k5_CAM_on*conc_MLCK_free*conc_CaM_C_-k5_CAM_off*conc_CaM_CM-k6_CAM_on*sqr(conc_Ca_md)*conc_CaM_CM+k6_CAM_off*conc_CaMNCM;
    ode(conc_CaMNCM, time) = k6_CAM_on*sqr(conc_Ca_md)*conc_CaM_CM-k6_CAM_off*conc_CaMNCM+k7_CAM_on*conc_MLCK_free*conc_CaMNC_-k7_CAM_off*conc_CaMNCM;
    conc_CaMNC_ = conc_CaM_tot-(conc_CaM___+conc_CaMN__+conc_CaM_C_+conc_CaM_CM+conc_CaMNCM);
    conc_MLCK_free = conc_MLCK_tot-(conc_CaM_CM+conc_CaMNCM);
  enddef;
  def map between Environment and MLCK_Activation_CaM_md for
    vars time and time;
  enddef;
  def map between Parameters_VR and MLCK_Activation_CaM_md for
    vars k1_CAM_on and k1_CAM_on;
    vars k1_CAM_off and k1_CAM_off;
    vars k2_CAM_on and k2_CAM_on;
    vars k2_CAM_off and k2_CAM_off;
    vars k3_CAM_on and k3_CAM_on;
    vars k3_CAM_off and k3_CAM_off;
    vars k4_CAM_on and k4_CAM_on;
    vars k4_CAM_off and k4_CAM_off;
    vars k5_CAM_on and k5_CAM_on;
    vars k5_CAM_off and k5_CAM_off;
    vars k6_CAM_on and k6_CAM_on;
    vars k6_CAM_off and k6_CAM_off;
    vars k7_CAM_on and k7_CAM_on;
    vars k7_CAM_off and k7_CAM_off;
    vars conc_CaM_tot and conc_CaM_tot;
    vars conc_MLCK_tot and conc_MLCK_tot;
  enddef;
  def map between Calcium_Conc_md and MLCK_Activation_CaM_md for
    vars conc_Ca_md and conc_Ca_md;
    vars conc_CaMN__ and conc_CaMN__;
    vars conc_CaM_C_ and conc_CaM_C_;
    vars conc_CaM_CM and conc_CaM_CM;
    vars conc_CaMNCM and conc_CaMNCM;
  enddef;
  def map between H2O2_Kinetics and MLCP_Rate_Constants for
    vars conc_H2O2_cyt and conc_H2O2_cyt;
  enddef;

  def comp Contractile_Force as
    var f_p: dimensionless;
    var F_contract: dimensionless;
    var conc_MyoP: Molar {pub: in};
    var conc_AMyoP: Molar {pub: in};
    var conc_Myo_tot: Molar {pub: in};
    var a: dimensionless {init: 3.9796};
    var b: dimensionless {init: 97.35};
    var c: dimensionless {init: 522.25};
    var d: dimensionless {init: 329.81};
    f_p = (conc_MyoP+conc_AMyoP)/conc_Myo_tot;
    F_contract = a-b*f_p+c*sqr(f_p)-d*pow(f_p, 3{dimensionless});
  enddef;
  def map between MLCK_Phospho_Myosin and Contractile_Force for
    vars conc_MyoP and conc_MyoP;
    vars conc_AMyoP and conc_AMyoP;
  enddef;
  def map between Parameters_VR and Contractile_Force for
    vars conc_Myo_tot and conc_Myo_tot;
  enddef;
  def unit cubic_Meter as
    unit meter {expo: 3};
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
enddef;
