<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="xLucG2q3uF0" name="moussa"><component name="moussa"><variable name="k2" units="per_sec"/><variable name="k1" units="per_sec"/><math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>X1</ci></apply><apply><times/><apply><minus/><ci>k1</ci></apply><ci>X1</ci></apply></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>X2</ci></apply><apply><minus/><apply><times/><ci>k1</ci><ci>X1</ci></apply><apply><times/><ci>k2</ci><ci>X2</ci></apply></apply></apply><apply><eq/><ci>A</ci><apply><plus/><ci>X1</ci><ci>X2</ci></apply></apply><apply><eq/><ci>D</ci><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn><ci>A</ci></apply></apply><apply><eq/><ci>k1</ci><apply><times/><ci>A1</ci><apply><exp/><apply><divide/><apply><minus/><ci>E1</ci></apply><apply><times/><ci>R</ci><ci>T</ci></apply></apply></apply></apply></apply><apply><eq/><ci>k2</ci><apply><times/><ci>A2</ci><apply><exp/><apply><divide/><apply><minus/><ci>E2</ci></apply><apply><times/><ci>R</ci><ci>T</ci></apply></apply></apply></apply></apply></math><variable initial_value="1" name="X1" units="conc"/><variable initial_value="0" name="X2" units="conc"/><variable name="time" units="second"/><variable name="A" units="conc"/><variable name="D" units="conc"/><variable initial_value="8.3" name="R" units="gas_constant"/><variable initial_value="2.5E5" name="E1" units="J_per_mole"/><variable initial_value="1.28E5" name="E2" units="J_per_mole"/><variable initial_value="0.0683E38" name="A1" units="per_sec"/><variable initial_value="0.0283E19" name="A2" units="per_sec"/><variable initial_value="325" name="T" units="kelvin"/></component><units base_units="yes" name="conc"/><units name="per_sec"><unit exponent="-1" units="second"/></units><units name="gas_constant"><unit units="joule"/><unit exponent="-1" units="mole"/><unit exponent="-1" units="kelvin"/></units><units name="J_per_mole"><unit units="joule"/><unit exponent="-1" units="mole"/></units><rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><rdf:Description rdf:nodeID="n1"><rdf:rest><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/></rdf:rest><rdf:first><rdf:Description rdf:nodeID="n2"/></rdf:first></rdf:Description><rdf:Description rdf:nodeID="n3"><boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n1"/></boundIntervals></rdf:Description><rdf:Description rdf:nodeID="n2"><endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">6000</endingValue><algorithm xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">am112</algorithm></rdf:Description><rdf:Description rdf:about="#xLucG2q3uF0"><simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n3"/></simulation></rdf:Description></rdf:RDF></model>