<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :hatzimanikatis_model_1999.xml

CREATED :  17th October 2002

LAST MODIFIED : 9th April 2003

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Hatzimanikatis, Lee and Bailey's 1999 model of the G1-S transition of the mammalian cell cycle.

CHANGES:  
  09/04/2003 - AAC - Added publication date information.  

--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="hatzimanikatis_model_1999" name="hatzimanikatis_model_1999">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Regulation of the G1-S Transition of the Mammalian Cell Cycle</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This CellML model has been recoded to remove the reaction element.  The model opens in PCEnv and COR but unfortunately it does not run due to there being 'circular arguments' (COR) or the model being 'under-constrained' (PCEnv).  At the moment this is a limitation of the simulation software because it is unable to process nonlinear
algebraic equations that must be solved iteratively at each time step.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
In order to better understand developmental and tumour biology, extensive research on the control of the mammalian cell cycle is being carried out.  At the protein level, several molecules play a role in the control of the G1-S transition of the cell cycle.  Specifically, G1 cyclins such as cyclin E are known to form phosphorylated complexes with cyclin dependent kinases (cdk's, such as cdk2).  These complexes, which can be inhibited by other proteins, can phosphorylate pocket proteins such as pRb.  Hyperphosphorylation of pRb occurs at the time of E2F-1 release.  This transcription factor initiates the transcription of genes involved in S phase activities, including DNA polymerase. </para>

<para>
Hatzimanikatis, Lee and Bailey capture the components and interactions of cyclin E, cdk2, pRb, inhibitor and E2F-1 during the G1-S transition of the cell cycle in their mathematical model (see the figure below).    
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
A Mathematical Description of Regulation of the G1-S Transition of the Mammalian Cell Cycle, V. Hatzimanikatis, K. H. Lee and J. E. Bailey, 1999, <emphasis>Biotechnology and Bioengineering</emphasis>, 65, 631-637. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10550769&amp;dopt=Abstract">PubMed ID: 10550769</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>diagram of the cell cycle</title>
    </objectinfo>
    <imagedata fileref="hatzimanikatis_1999.png"/>
  </imageobject>
</mediaobject>
<caption>A schematic diagram of the reactions involved during the G1-S transition of the mammalian cell cycle.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
 
   
   <component name="environment">
      <variable units="dimensionless" public_interface="out" name="time"/>
   </component>
  
   <component cmeta:id="C" name="C">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="C">
        <dc:title>C</dc:title>
        <dcterms:alternative>cyclin E</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF> 
    <variable units="dimensionless" public_interface="out" name="C" initial_value="0.38"/>
    
    <variable units="dimensionless" name="gamma" initial_value="1.0"/>
    
    <variable units="dimensionless" public_interface="in" name="Vs"/>
    <variable units="dimensionless" public_interface="in" name="V1"/>
    <variable units="dimensionless" public_interface="in" name="V2"/> 
    <variable units="dimensionless" public_interface="in" name="Vd"/>
    <variable units="dimensionless" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="1"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> C </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <ci> Vs </ci>
            <apply>
              <times/>
              <ci> gamma </ci>
              <ci> V2 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> gamma </ci>
              <ci> V1 </ci>
            </apply>
            <ci> Vd </ci>
          </apply>
        </apply> 
      </apply> 
    </math>  
  </component>

  <component cmeta:id="K" name="K">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="K">
        <dc:title>K</dc:title>
        <dcterms:alternative>cdk2</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF> 
    <variable units="dimensionless" public_interface="out" name="K" initial_value="0.1"/>
    
    <variable units="dimensionless" public_interface="in" name="V1"/>
    <variable units="dimensionless" public_interface="in" name="V2"/> 
    <variable units="dimensionless" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="2"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> K </ci> 
        </apply>
        <apply>
          <minus/>
          <ci> V2 </ci>
          <ci> V1 </ci>
        </apply> 
      </apply> 
    </math>  
  </component>

  <component cmeta:id="RP" name="RP">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="RP">
        <dc:title>RP</dc:title>
        <dcterms:alternative>hyperphosphorylated pRb</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF> 
    <variable units="dimensionless" public_interface="out" name="RP" initial_value="1.0"/>
    
    <variable units="dimensionless" public_interface="in" name="V3"/>
    <variable units="dimensionless" public_interface="in" name="V4"/> 
    <variable units="dimensionless" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="3"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> time </ci>
          </bvar> 
          <ci> RP </ci> 
        </apply>
        <apply>
          <minus/>
          <ci> V3 </ci>
          <ci> V4 </ci>
        </apply> 
      </apply> 
    </math>  
  </component>

  <component cmeta:id="E" name="E">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="E">
        <dc:title>E</dc:title>
        <dcterms:alternative>E2F</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF> 
    <variable units="dimensionless" public_interface="out" name="E"/>
    
    <variable units="dimensionless" name="sigma" initial_value="10"/> 
    
    <variable units="dimensionless" public_interface="in" name="RE"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="4"> 
      <apply>
        <eq/> 
        <ci> E </ci> 
        <apply>
          <minus/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <times/>
            <ci> sigma </ci>
            <ci> RE </ci>
          </apply>
        </apply> 
      </apply> 
    </math>  
  </component>

  <component cmeta:id="KP" name="KP">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="KP">
        <dc:title>KP</dc:title>
        <dcterms:alternative>phosphorylated cyclin E-cdk2 complex</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF> 
    <variable units="dimensionless" public_interface="out" name="KP"/>
    
    <variable units="dimensionless" public_interface="in" name="KPI"/> 
    <variable units="dimensionless" public_interface="in" name="K"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="5"> 
      <apply>
        <eq/> 
        <ci> KP </ci> 
        <apply>
          <minus/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>
            <ci> KPI </ci>
            <ci> K </ci>
          </apply>
        </apply> 
      </apply> 
    </math>  
  </component>

  <component cmeta:id="KPI" name="KPI">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="KPI">
        <dc:title>KPI</dc:title>
        <dcterms:alternative>phosphorylated cyclin E-cdk2 complex bound to inhibitor</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF> 
    <variable units="dimensionless" public_interface="out" name="KPI"/>
    
    <variable units="dimensionless" name="thetaI" initial_value="1.0"/> 
    
    <variable units="dimensionless" public_interface="in" name="KP"/> 
    <variable units="dimensionless" public_interface="in" name="I"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="6"> 
      <apply>
        <eq/> 
        <ci> KPI </ci> 
        <apply>
          <times/>
          <ci> thetaI </ci>
          <ci> KP </ci>
          <ci> I </ci>
        </apply> 
      </apply> 
    </math>  
  </component>

  <component cmeta:id="I" name="I">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="I">
        <dc:title>I</dc:title>
        <dcterms:alternative>cyclin E-cdk2 complex inhibitor</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF> 
    <variable units="dimensionless" public_interface="out" name="I"/>
    
    <variable units="dimensionless" name="lambda" initial_value="1.0"/> 
    
    <variable units="dimensionless" public_interface="in" name="KPI"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="7"> 
      <apply>
        <eq/> 
        <ci> I </ci> 
        <apply>
          <minus/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <times/>
            <ci> lambda </ci>
            <ci> KPI </ci>
          </apply>
        </apply> 
      </apply> 
    </math>  
  </component>

  <component cmeta:id="RE" name="RE">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="RE">
        <dc:title>RE</dc:title>
        <dcterms:alternative>hyperphosphorylated pRb bound to E2F</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF> 
    <variable units="dimensionless" public_interface="out" name="RE"/>
    
    <variable units="dimensionless" name="thetaE" initial_value="0.01"/> 
    
    <variable units="dimensionless" public_interface="in" name="R"/> 
    <variable units="dimensionless" public_interface="in" name="E"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="8"> 
      <apply>
        <eq/> 
        <ci> RE </ci> 
        <apply>
          <times/>
          <ci> thetaE </ci>
          <ci> R </ci>
          <ci> E </ci>
        </apply> 
      </apply> 
    </math>  
  </component>
  
  <component cmeta:id="R" name="R">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="R">
        <dc:title>R</dc:title>
        <dcterms:alternative>hypophosphorylated pRb</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF> 
    <variable units="dimensionless" public_interface="out" name="R"/>
    
    <variable units="dimensionless" public_interface="in" name="RP"/> 
    <variable units="dimensionless" public_interface="in" name="RE"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="8a"> 
      <apply>
        <eq/> 
        <ci> R </ci> 
        <apply>
          <minus/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>
            <ci> RP </ci>
            <ci> RE </ci>
          </apply>
        </apply> 
      </apply> 
    </math>  
  </component>
   
  <component name="Vs">
    <variable units="dimensionless" public_interface="out" name="Vs"/>
    
    <variable units="dimensionless" name="VCs" initial_value="1.0"/>
    <variable units="dimensionless" name="Vsm" initial_value="1.0"/>
    <variable units="dimensionless" name="KsE" initial_value="0.1"/>
    
    <variable units="dimensionless" public_interface="in" name="E"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="9">
      <apply>
        <eq/>
        <ci> Vs </ci>
        <apply>
          <plus/>
          <ci> VCs </ci>
          <apply>
            <times/>
            <ci> Vsm </ci>
            <apply>
              <divide/>
              <ci> E </ci>
              <apply>
                <plus/>
                <ci> KsE </ci>
                <ci> E </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>

  <component name="V1">
    <variable units="dimensionless" public_interface="out" name="V1"/>
    
    <variable units="dimensionless" name="V1m" initial_value="50.0"/>
    <variable units="dimensionless" name="K1C" initial_value="0.1"/>
    <variable units="dimensionless" name="K1" initial_value="0.0001"/>
    
    <variable units="dimensionless" public_interface="in" name="C"/>
    <variable units="dimensionless" public_interface="in" name="K"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="10">
      <apply>
        <eq/>
        <ci> V1 </ci>
        <apply>
          <times/>
          <ci> V1m </ci>
          <apply>
            <divide/>
            <ci> C </ci>
            <apply>
              <plus/>
              <ci> K1C </ci>
              <ci> C </ci>
            </apply>
          </apply>
          <apply>
            <divide/>
            <ci> K </ci>
            <apply>
              <plus/>
              <ci> K1 </ci>
              <ci> K </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>

  <component name="V2">
    <variable units="dimensionless" public_interface="out" name="V2"/>
    
    <variable units="dimensionless" name="V2m" initial_value="40"/>
    <variable units="dimensionless" name="K2" initial_value="0.0001"/>
    
    <variable units="dimensionless" public_interface="in" name="KP"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="11">
      <apply>
        <eq/>
        <ci> V2 </ci>
        <apply>
          <times/>
          <ci> V2m </ci>
          <apply>
            <divide/>
            <ci> KP </ci>
            <apply>
              <plus/>
              <ci> K2 </ci>
              <ci> KP </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>

  <component name="V3">
    <variable units="dimensionless" public_interface="out" name="V3"/>
    
    <variable units="dimensionless" name="V3m" initial_value="3000"/>
    <variable units="dimensionless" name="K3" initial_value="0.0001"/>
    
    <variable units="dimensionless" public_interface="in" name="KP"/>
    <variable units="dimensionless" public_interface="in" name="RE"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="12">
      <apply>
        <eq/>
        <ci> V3 </ci>
        <apply>
          <times/>
          <ci> V3m </ci>
          <ci> KP </ci>
          <apply>
            <divide/>
            <ci> RE </ci>
            <apply>
              <plus/>
              <ci> K3 </ci>
              <ci> RE </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>

  <component name="V4">
    <variable units="dimensionless" public_interface="out" name="V4"/>
    
    <variable units="dimensionless" name="V4m" initial_value="3.0"/>
    <variable units="dimensionless" name="K4" initial_value="0.0001"/>
    
    <variable units="dimensionless" public_interface="in" name="RP"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="13">
      <apply>
        <eq/>
        <ci> V4 </ci>
        <apply>
          <times/>
          <ci> V4m </ci>
          <apply>
            <divide/>
            <ci> RP </ci>
            <apply>
              <plus/>
              <ci> K4 </ci>
              <ci> RP </ci>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>

  <component name="Vd">
    <variable units="dimensionless" public_interface="out" name="Vd"/>
    
    <variable units="dimensionless" name="VdEm" initial_value="1000.0"/>
    <variable units="dimensionless" name="KdC" initial_value="0.005"/>
    
    <variable units="dimensionless" public_interface="in" name="C"/>
    <variable units="dimensionless" public_interface="in" name="E"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="14">
      <apply>
        <eq/>
        <ci> Vd </ci>
        <apply>
          <plus/>
          <ci> C </ci>
          <apply>
            <times/>
            <ci> VdEm </ci>
            <ci> E </ci>
            <apply>
              <divide/>
              <ci> C </ci>
              <apply>
                <plus/>
                <ci> KdC </ci>
                <ci> C </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>    
    </math>
  </component>
  
   
   <connection>
      <map_components component_2="environment" component_1="C"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="K"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="RP"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
     <map_components component_2="Vs" component_1="C"/>
     <map_variables variable_2="Vs" variable_1="Vs"/>
   </connection>

   <connection>
     <map_components component_2="V1" component_1="C"/>
     <map_variables variable_2="V1" variable_1="V1"/>
     <map_variables variable_2="C" variable_1="C"/>
   </connection>

   <connection>
     <map_components component_2="V2" component_1="C"/>
     <map_variables variable_2="V2" variable_1="V2"/>
   </connection>

   <connection>
     <map_components component_2="Vd" component_1="C"/>
     <map_variables variable_2="Vd" variable_1="Vd"/>
     <map_variables variable_2="C" variable_1="C"/>
   </connection>

   <connection>
     <map_components component_2="V1" component_1="K"/>
     <map_variables variable_2="V1" variable_1="V1"/>
     <map_variables variable_2="K" variable_1="K"/>
   </connection>

   <connection>
     <map_components component_2="V2" component_1="K"/>
     <map_variables variable_2="V2" variable_1="V2"/>
   </connection>

   <connection>
     <map_components component_2="V3" component_1="RP"/>
     <map_variables variable_2="V3" variable_1="V3"/>
   </connection>

   <connection>
     <map_components component_2="V4" component_1="RP"/>
     <map_variables variable_2="V4" variable_1="V4"/>
     <map_variables variable_2="RP" variable_1="RP"/>
   </connection>

   <connection>
     <map_components component_2="E" component_1="RE"/>
     <map_variables variable_2="E" variable_1="E"/>
     <map_variables variable_2="RE" variable_1="RE"/>
   </connection>

   <connection>
     <map_components component_2="KPI" component_1="KP"/>
     <map_variables variable_2="KPI" variable_1="KPI"/>
     <map_variables variable_2="KP" variable_1="KP"/>
   </connection>

   <connection>
     <map_components component_2="K" component_1="KP"/>
     <map_variables variable_2="K" variable_1="K"/>
   </connection>

   <connection>
     <map_components component_2="I" component_1="KPI"/>
     <map_variables variable_2="KPI" variable_1="KPI"/>
     <map_variables variable_2="I" variable_1="I"/>
   </connection>
   
   <connection>
     <map_components component_2="RP" component_1="R"/>
     <map_variables variable_2="RP" variable_1="RP"/>
   </connection>

   <connection>
     <map_components component_2="R" component_1="RE"/>
     <map_variables variable_2="R" variable_1="R"/>
	 <map_variables variable_2="RE" variable_1="RE"/>
   </connection>

   <connection>
     <map_components component_2="E" component_1="Vs"/>
     <map_variables variable_2="E" variable_1="E"/>
   </connection>

   <connection>
     <map_components component_2="KP" component_1="V2"/>
     <map_variables variable_2="KP" variable_1="KP"/>
   </connection>

   <connection>
     <map_components component_2="RE" component_1="V3"/>
     <map_variables variable_2="RE" variable_1="RE"/>
   </connection>

   <connection>
     <map_components component_2="KP" component_1="V3"/>
     <map_variables variable_2="KP" variable_1="KP"/>
   </connection>
   
   <connection>
     <map_components component_2="E" component_1="Vd"/>
     <map_variables variable_2="E" variable_1="E"/>
   </connection>



<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#da9903b3-e139-4b34-964a-d6674c192809">
    <rdf:li rdf:resource="rdf:#1e06e7fe-f3a2-4859-a149-b916fd887d94"/>
    <rdf:li rdf:resource="rdf:#56c84be0-86ef-4094-8d90-250ba29d620d"/>
    <rdf:li rdf:resource="rdf:#5278bfd9-4ff4-4023-b1b9-06c37337c582"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
    <dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#84b149e6-360d-4edf-9147-8ba00c5d99d3"/>
    <dcterms:created rdf:resource="rdf:#c4d862ac-1160-4c60-bc44-104022bd5f00"/>
    <dc:creator rdf:resource="rdf:#5746b27e-78e9-4fbc-88a5-f5597ca0de53"/>
    <cmeta:modification rdf:resource="rdf:#8986038d-17ef-40c6-bcc7-253abae416bc"/>
    <cmeta:modification rdf:resource="rdf:#4cf74172-a746-4ae6-a673-bf374b05a15f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5278bfd9-4ff4-4023-b1b9-06c37337c582">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#7b7ef0d4-ecd1-44c3-8964-41c6d6d823a7"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#971abcb8-9871-481d-a809-941f3e05e157">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#88f23cde-f77e-422d-a995-a58b9795fbc9">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>
      <rdf:Bag>
        <rdf:li>mammalian</rdf:li>
        <rdf:li>cell cycle</rdf:li>
        <rdf:li>g1-s transition</rdf:li>
      </rdf:Bag>
    </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2ad36ea5-2cc7-47ea-bb6c-4232bdbe4576">
    <dc:creator rdf:resource="rdf:#da9903b3-e139-4b34-964a-d6674c192809"/>
    <dc:title>A mathematical description of regulation of the G1-S transition of the mammalian cell cycle</dc:title>
    <bqs:volume>65</bqs:volume>
    <bqs:first_page>631</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#65d4a070-5b5b-48df-84b2-c27f3e22fafc"/>
    <dcterms:issued rdf:resource="rdf:#5ff2c98e-28ec-4779-870f-03342baf6c9f"/>
    <bqs:last_page>637</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b37da4b0-f818-4890-9374-aa8ea54bfa49">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9fb69d1b-5e27-4699-911e-cfe8d336eb10">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#df1e4199-d527-4b5a-b3f5-d4b7de3353f8">
    <vCard:Given>Autumn</vCard:Given>
    <vCard:Family>Cuellar</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1e06e7fe-f3a2-4859-a149-b916fd887d94">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#98237b53-c0a6-44fc-9722-0ddfb1b44d33"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c4d862ac-1160-4c60-bc44-104022bd5f00">
    <dcterms:W3CDTF>2002-10-17T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8986038d-17ef-40c6-bcc7-253abae416bc">
    <dcterms:modified rdf:resource="rdf:#c9764415-b10a-4ea5-af69-fcd58274e8ff"/>
    <rdf:value>The model has been recoded to remove the reaction element.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#01bbd733-8935-4763-a8a7-420319fc5ccd"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#65d4a070-5b5b-48df-84b2-c27f3e22fafc">
    <dc:title>Biotechnology and Bioengineering</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0a37176c-3169-4180-b277-d0c474af11a8">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#81edb9b5-6ca4-4546-b197-9ee9339ac490">
    <dc:subject rdf:resource="rdf:#88f23cde-f77e-422d-a995-a58b9795fbc9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4cf74172-a746-4ae6-a673-bf374b05a15f">
    <dcterms:modified rdf:resource="rdf:#12f06b39-c4eb-41fc-8292-e7d2e7453161"/>
    <rdf:value>
          Added publication date information.
        </rdf:value>
    <cmeta:modifier rdf:resource="rdf:#4a74a4a3-e353-4850-8c84-95760e669c4f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9c892bfc-304a-4403-af7e-3bf9423785e6">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#56c84be0-86ef-4094-8d90-250ba29d620d">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#ca3675b3-f689-4db8-b3db-a0f216eafe26"/>
  </rdf:Description>
  <rdf:Description rdf:about="#hatzimanikatis_model_1999">
    <dc:title>
        Hatzimanikatis, Lee and Bailey's 1999 model of the G1-S transition of 
        the mammalian cell cycle.
      </dc:title>
    <cmeta:comment rdf:resource="rdf:#bf95ec93-1f79-483e-992f-4fd9680c2c64"/>
    <bqs:reference rdf:resource="rdf:#276f1633-8037-4592-b4c1-3c31a987fdc7"/>
    <bqs:reference rdf:resource="rdf:#81edb9b5-6ca4-4546-b197-9ee9339ac490"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5746b27e-78e9-4fbc-88a5-f5597ca0de53">
    <vCard:ORG rdf:resource="rdf:#e272e37e-4e55-4f98-8dd8-7f5596211690"/>
    <vCard:EMAIL rdf:resource="rdf:#9fb69d1b-5e27-4699-911e-cfe8d336eb10"/>
    <vCard:N rdf:resource="rdf:#971abcb8-9871-481d-a809-941f3e05e157"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bf95ec93-1f79-483e-992f-4fd9680c2c64">
    <dc:creator rdf:resource="rdf:#b37da4b0-f818-4890-9374-aa8ea54bfa49"/>
    <rdf:value>This is the CellML descripition of Hatzimanikatis, Lee and Bailey's &#13;
          1999 model of the G1-S transition of the mammalian cell cycle.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#98237b53-c0a6-44fc-9722-0ddfb1b44d33">
    <vCard:Given>V</vCard:Given>
    <vCard:Family>Hatzimanikatis</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#12f06b39-c4eb-41fc-8292-e7d2e7453161">
    <dcterms:W3CDTF>2003-04-09</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ca3675b3-f689-4db8-b3db-a0f216eafe26">
    <vCard:Given>K</vCard:Given>
    <vCard:Family>Lee</vCard:Family>
    <vCard:Other>H</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#01bbd733-8935-4763-a8a7-420319fc5ccd">
    <vCard:N rdf:resource="rdf:#0a37176c-3169-4180-b277-d0c474af11a8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4a74a4a3-e353-4850-8c84-95760e669c4f">
    <vCard:N rdf:resource="rdf:#df1e4199-d527-4b5a-b3f5-d4b7de3353f8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5ff2c98e-28ec-4779-870f-03342baf6c9f">
    <dcterms:W3CDTF>1999-12-20</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e272e37e-4e55-4f98-8dd8-7f5596211690">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7b7ef0d4-ecd1-44c3-8964-41c6d6d823a7">
    <vCard:Given>J</vCard:Given>
    <vCard:Family>Bailey</vCard:Family>
    <vCard:Other>E</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c9764415-b10a-4ea5-af69-fcd58274e8ff">
    <dcterms:W3CDTF>2008-01-02T10:51:36+13:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#276f1633-8037-4592-b4c1-3c31a987fdc7">
    <bqs:Pubmed_id>10550769</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#2ad36ea5-2cc7-47ea-bb6c-4232bdbe4576"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#84b149e6-360d-4edf-9147-8ba00c5d99d3">
    <dc:creator rdf:resource="rdf:#9c892bfc-304a-4403-af7e-3bf9423785e6"/>
    <rdf:value>This CellML model has been recoded to remove the reaction element.  The model opens in PCEnv and COR but unfortunately it does not run due to there being 'circular arguments' (COR) or the model being 'under-constrained' (PCEnv).  At the moment this is a limitation of the simulation software because it is unable to process nonlinear&#13;
algebraic equations that must be solved iteratively at each time step.</rdf:value>
  </rdf:Description>
</rdf:RDF>
</model>
