<?xml version="1.0"?>
<model 
    name="oneill_cell_death_fast"
    xmlns="http://www.cellml.org/cellml/1.0#"
    xmlns:cmeta="http://www.cellml.org/metadata/1.0#"
    xmlns:cellml="http://www.cellml.org/cellml/1.0#"
    cmeta:id="rf5pux2q3do">

  <!-- Model Details -->
  <rdf:RDF
      xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"
      xmlns:dc="http://purl.org/dc/elements/1.1/"
      xmlns:cmeta="http://www.cellml.org/metadata/1.0#"
      xmlns:dcterms="http://purl.org/dc/terms/"
      xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#"
      xmlns:bqs="http://www.cellml.org/bqs/1.0#"
      xmlns:cs="http://www.cellml.org/metadata/simulation/1.0#">

    <rdf:Description rdf:about="">

      <dc:title>
	O'Neill et al. 2011
      </dc:title>

      <dc:creator rdf:parseType="Resource">
        <vCard:N rdf:parseType="Resource">
          <vCard:Family>Hall</vCard:Family>
          <vCard:Given>Sheldon</vCard:Given>
          <vCard:Other>Karl</vCard:Other>
        </vCard:N>
        <vCard:EMAIL rdf:parseType="Resource">
          <rdf:value>sheldon.hall@eng.ox.ac.uk</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet" />
        </vCard:EMAIL>

        <vCard:ORG rdf:parseType="Resource">
          <vCard:Orgname>The University of Oxford</vCard:Orgname>
          <vCard:Orgunit>Institute of Biomedical Engineering</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
     
      <dcterms:created rdf:parseType="Resource">
        <dcterms:W3CDTF>2014-09-22</dcterms:W3CDTF>
      </dcterms:created>

      <dcterms:modified rdf:parseType="Resource">
        <dcterms:W3CDTF>2014-09-22</dcterms:W3CDTF>
      </dcterms:modified>

      <dc:publisher>
        The University of Oxford, Institute of Biomedical Engineering
      </dc:publisher>
    </rdf:Description>
  </rdf:RDF>

  <!-- Model Spec -->
  <component name="equation_1">
    <variable initial_value="0.99" name="A" units="conc"/>
    <variable initial_value="0" name="D" units="conc"/>
    <variable name="kf" units="per_sec"/>
    <variable initial_value="0.00777" name="kb" units="per_sec"/>
    <variable name="time" units="second"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML"><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>A</ci></apply><apply><plus/><apply><times/><apply><minus/><ci>kf</ci></apply><ci>A</ci></apply><apply><times/><ci>kb</ci><apply><minus/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn><ci>A</ci></apply><ci>D</ci></apply></apply></apply></apply><apply><eq/><apply><diff/><bvar><ci>time</ci></bvar><ci>D</ci></apply><apply><times/><ci>kf</ci><apply><minus/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn><ci>A</ci></apply><ci>D</ci></apply></apply></apply><apply><eq/><ci>kf</ci><apply><times/><ci>kf_</ci><apply><exp/><apply><divide/><ci>T</ci><ci>Tk</ci></apply></apply><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn><ci>A</ci></apply></apply></apply><apply><eq/><ci>V</ci><apply><minus/><apply><minus/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="conc">1</cn><ci>A</ci></apply><ci>D</ci></apply></apply>
    </math>
    <variable initial_value="0.00333" name="kf_" units="per_conc_per_sec"/>
    <variable initial_value="313" name="Tk" units="kelvin"/>
    <variable initial_value="340" name="T" units="kelvin"/>
    <variable name="V" units="conc"/>
  </component>
  <units name="per_sec">
    <unit exponent="-1" units="second"/>
  </units>
  <units base_units="yes" name="conc"/>
  <units name="per_conc_per_sec">
    <unit exponent="-1" units="conc"/>
    <unit exponent="-1" units="second"/>
  </units>
</model>
