def model figure_S1 as
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit nmol as
    unit mole {pref: nano};
  enddef;
  def unit mM as
    unit nmol;
    unit mm {expo: -3};
  enddef;
  def unit K as
    unit kelvin;
  enddef;
  def unit um as
    unit metre {pref: micro};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mM_per_ms4 as
    unit mM;
    unit ms {expo: -4};
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit per_ms;
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit pH_units as base unit;
  def unit per_pH_units as
    unit pH_units {expo: -1};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit uL as
    unit litre {pref: micro};
  enddef;
  def unit uL_per_cm3 as
    unit uL;
    unit cm {expo: -3};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit per_mM3_per_ms as
    unit mM {expo: -3};
    unit per_ms;
  enddef;
  def unit per_ms_per_mM as
    unit per_ms;
    unit mM {expo: -1};
  enddef;
  def unit per_mM4_per_ms as
    unit mM {expo: -4};
    unit per_ms;
  enddef;
  def unit uA_per_cm2 as
    unit uA;
    unit cm {expo: -2};
  enddef;
  def unit uA_per_mA as
    unit uA;
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit mM_per_ms_per_mV as
    unit mM;
    unit per_ms;
    unit per_mV;
  enddef;
  def unit C_per_mmol as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mM_per_mV as
    unit mM;
    unit per_mV;
  enddef;
  def unit mV_per_mM as
    unit mV;
    unit per_mM;
  enddef;
  def unit N_per_mm2 as
    unit newton;
    unit mm {expo: -2};
  enddef;
  def unit mS as
    unit siemens {pref: milli};
  enddef;
  def unit mS_per_cm2 as
    unit mS;
    unit cm {expo: -2};
  enddef;
  def unit cm_per_s as
    unit cm;
    unit second {expo: -1};
  enddef;
  def unit cm_per_ms as
    unit cm;
    unit per_ms;
  enddef;
  def unit J_per_mol_per_K as
    unit joule;
    unit mole {expo: -1};
    unit K {expo: -1};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit uF_per_cm2 as
    unit uF;
    unit cm {expo: -2};
  enddef;
  def unit s_per_ms as
    unit second;
    unit per_ms;
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit per_ms3 as
    unit ms {expo: -3};
  enddef;
  def unit cm2_per_uA as
    unit cm {expo: 2};
    unit uA {expo: -1};
  enddef;
  def unit cm2_per_uF as
    unit cm {expo: 2};
    unit uF {expo: -1};
  enddef;
  def unit per_um as
    unit um {expo: -1};
  enddef;
  def unit C_cm_per_s_per_mol as
    unit coulomb;
    unit cm;
    unit second {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit mM3_cm2_per_uA as
    unit mM {expo: 3};
    unit cm2;
    unit uA {expo: -1};
  enddef;
  def unit mM3 as
    unit mM {expo: 3};
  enddef;
  def unit mmol_per_mol as
    unit mole {pref: milli};
    unit mole {expo: -1};
  enddef;
  def unit mmol_per_C_per_cm as
    unit mole {pref: milli};
    unit coulomb {expo: -1};
    unit cm {expo: -1};
  enddef;
  def unit TODO as
    unit dimensionless;
  enddef;

  def comp time as
    var time: dimensionless {pub: out};
  enddef;

  def comp stimulus_current as
    var time: dimensionless {pub: in};
    var Istim: dimensionless {pub: out};
    var stimPeriod: dimensionless {init: 4e3};
    var stimDuration: dimensionless {init: 0.5};
    var stimCurrent: dimensionless {init: -100.0};
    Istim = sel
      case rem(time, stimPeriod) < stimDuration:
        stimCurrent;
      otherwise:
        0.0{dimensionless};
    endsel;
  enddef;

  def comp model as
    var time: dimensionless {priv: out, pub: in};
    var Istim: dimensionless {priv: out, pub: in};
  enddef;

  def comp parameters as
    var clamp_ATPi: dimensionless {init: 0.0, priv: out, pub: out};
    var clamp_ATPi_cyto: dimensionless {init: 0.0, priv: out, pub: out};
    var Faraday: C_per_mmol {init: 96.5, priv: out, pub: out};
    var R: J_per_mol_per_K {init: 8.314, pub: out};
    var T: K {init: 310.0, priv: out, pub: out};
    var LHospitalThreshold: mV {init: 1e-7, priv: out, pub: out};
    var kt_2: dimensionless {init: 2.0e-3, priv: out, pub: out};
    var kf_2: dimensionless {init: 1.4e-4, priv: out, pub: out};
    var kf_3: dimensionless {init: 1.33e-6, priv: out, pub: out};
    var keq: dimensionless {init: 0.0095, priv: out, pub: out};
    var CRT_cyto: mM {init: 25.0, priv: out, pub: out};
    var CRT_mito: mM {init: 25.0, priv: out, pub: out};
    var VATPase_cyto: dimensionless {init: 1.0E-5, priv: out, pub: out};
    var Acap: cm2 {init: 1.534E-4, priv: out, pub: out};
    var AcCoA: mM {init: 1.0, priv: out, pub: out};
    var aL: dimensionless {init: 2.0, priv: out, pub: out};
    var b: dimensionless {init: 0.5, priv: out, pub: out};
    var bL: dimensionless {init: 2.0, priv: out, pub: out};
    var C_m: uF_per_cm2 {init: 1.0, priv: out, pub: out};
    var Cao: mM {init: 2.0, priv: out, pub: out};
    var CIK: mM {init: 1.0, priv: out, pub: out};
    var Cm: mM {init: 1.5, priv: out, pub: out};
    var CMDNtot: mM {init: 50E-3, priv: out, pub: out};
    var Cmito: mM_per_mV {init: 1.812E-3, priv: out, pub: out};
    var CPN: mM {init: 10.0, priv: out, pub: out};
    var CoA: mM {init: 0.02, priv: out, pub: out};
    var CSQNtot: mM {init: 35.0, priv: out, pub: out};
    var DpH: pH_units {init: -0.6, priv: out, pub: out};
    var Dpsio: mV {init: 50.0, priv: out, pub: out};
    var eta: dimensionless {init: 0.35, priv: out, pub: out};
    var EtCS: mM {init: 0.4, priv: out, pub: out};
    var EtID: mM {init: 0.109, priv: out, pub: out};
    var EtKG: mM {init: 0.5, priv: out, pub: out};
    var EtMD: mM {init: 0.154, priv: out, pub: out};
    var EtSDH: mM {init: 0.5, priv: out, pub: out};
    var FAD: mM {init: 0.01, priv: out, pub: out};
    var FADH2: mM {init: 1.24, priv: out, pub: out};
    var fL: per_ms {init: 0.3, priv: out, pub: out};
    var fm: dimensionless {init: 0.0003, priv: out, pub: out};
    var fprime: per_ms {init: 0.0, priv: out, pub: out};
    var g: dimensionless {init: 0.85, priv: out, pub: out};
    var G_Cab: mS_per_cm2 {init: 0.003217, priv: out, pub: out};
    var G_Kp: mS_per_cm2 {init: 0.00828, priv: out, pub: out};
    var G_Na: mS_per_cm2 {init: 12.8, priv: out, pub: out};
    var G_Nab: mS_per_cm2 {init: 0.000545, priv: out, pub: out};
    var gh: mM_per_ms_per_mV {init: 2.0E-7, priv: out, pub: out};
    var gL: per_ms {init: 2.0, priv: out, pub: out};
    var GLU: mM {init: 10.0, priv: out, pub: out};
    var gprime: per_ms {init: 0.0, priv: out, pub: out};
    var H: mM {init: 2.5E-5, priv: out, pub: out};
    var hm: dimensionless {init: 0.5, priv: out, pub: out};
    var HTRPNtot: mM {init: 140E-3, priv: out, pub: out};
    var ICahalf: uA_per_cm2 {init: -0.4583, priv: out, pub: out};
    var INaKmax: uA_per_cm2 {init: 3.147, priv: out, pub: out};
    var IpCamax: uA_per_cm2 {init: 0.575, priv: out, pub: out};
    var KAATeq: dimensionless {init: 6.6, priv: out, pub: out};
    var KaCa: mM {init: 0.0005, priv: out, pub: out};
    var KACOeq: dimensionless {init: 2.22, priv: out, pub: out};
    var kact: mM {init: 0.00038, priv: out, pub: out};
    var KADP: mM {init: 0.62, priv: out, pub: out};
    var kaminus: per_ms {init: 0.576, priv: out, pub: out};
    var kaplus: per_mM4_per_ms {init: 1.215E10, priv: out, pub: out};
    var kbminus: per_ms {init: 1.930, priv: out, pub: out};
    var kbplus: per_mM3_per_ms {init: 4.05E6, priv: out, pub: out};
    var Kca: mM {init: 0.00127, priv: out, pub: out};
    var kcminus: per_ms {init: 0.0008, priv: out, pub: out};
    var kcnsASP: per_ms {init: 1.5E-6, priv: out, pub: out};
    var kcplus: per_ms {init: 0.10, priv: out, pub: out};
    var KCS: per_ms {init: 0.5, priv: out, pub: out};
    var kf1: dimensionless {init: 1.71E6, priv: out, pub: out};
    var kfAAT: per_ms {init: 6.44E-4, priv: out, pub: out};
    var kfACO: per_ms {init: 0.0125, priv: out, pub: out};
    var Kfb: mM {init: 0.00024, priv: out, pub: out};
    var kfFH: per_ms {init: 0.00332, priv: out, pub: out};
    var KFHeq: dimensionless {init: 1.0, priv: out, pub: out};
    var kfSL: per_mM_per_ms {init: 0.005, priv: out, pub: out};
    var kh_1: mM {init: 8.1E-5, priv: out, pub: out};
    var kh_2: mM {init: 5.98E-5, priv: out, pub: out};
    var Kh1: mM {init: 1.131E-5, priv: out, pub: out};
    var Kh2: mM {init: 26.7, priv: out, pub: out};
    var Kh3: mM {init: 6.68E-9, priv: out, pub: out};
    var Kh4: mM {init: 5.62E-6, priv: out, pub: out};
    var khtrpn_minus: per_ms {init: 3.3E-4, priv: out, pub: out};
    var khtrpn_plus: per_mM_per_ms {init: 100.0, priv: out, pub: out};
    var Ki_AM: mM {init: 0.26, priv: out, pub: out};
    var Ki_prime_SR: mM {init: 5.1, priv: out, pub: out};
    var Ki_SR: mM {init: 0.14, priv: out, pub: out};
    var Ki1AD_NaK: mM {init: 0.1, priv: out, pub: out};
    var KiADP_CaP: mM {init: 1.0, priv: out, pub: out};
    var kIDH: per_ms {init: 0.05, priv: out, pub: out};
    var KidhNADH: mM {init: 0.19, priv: out, pub: out};
    var KiFUM: mM {init: 1.3, priv: out, pub: out};
    var Kioaa: mM {init: 0.0031, priv: out, pub: out};
    var KiOxaa: mM {init: 0.15, priv: out, pub: out};
    var kKGDH: per_ms {init: 7.5E-2, priv: out, pub: out};
    var kltrpn_plus: per_mM_per_ms {init: 100.0, priv: out, pub: out};
    var kltrpn_minus: per_ms {init: 40E-3, priv: out, pub: out};
    var Km1AT_NaK: mM {init: 0.008, priv: out, pub: out};
    var Km1ATP_CaP: mM {init: 0.012, priv: out, pub: out};
    var Km2ATP_CaP: mM {init: 0.23, priv: out, pub: out};
    var KmAcCoA: mM {init: 0.0126, priv: out, pub: out};
    var Kmal: mM {init: 1.493, priv: out, pub: out};
    var KmATP_AM: mM {init: 0.03, priv: out, pub: out};
    var KmATP_SR: mM {init: 0.01, priv: out, pub: out};
    var KmCMDN: mM {init: 2.38E-3, priv: out, pub: out};
    var KmCa: mM {init: 1.38, priv: out, pub: out};
    var KmCSQN: mM {init: 0.8, priv: out, pub: out};
    var kMDH: per_ms {init: 0.111, priv: out, pub: out};
    var Kmg: mM {init: 0.0308, priv: out, pub: out};
    var KmIDNAD: mM {init: 0.923, priv: out, pub: out};
    var Kmiso: mM {init: 1.52, priv: out, pub: out};
    var KmKG: mM {init: 1.94, priv: out, pub: out};
    var KmKGNAD: mM {init: 38.7, priv: out, pub: out};
    var KmKo: mM {init: 1.5, priv: out, pub: out};
    var KmmNAD: mM {init: 0.2244, priv: out, pub: out};
    var KmNa: mM {init: 87.5, priv: out, pub: out};
    var KmNai: mM {init: 10.0, priv: out, pub: out};
    var KmnsCa: mM {init: 0.0012, priv: out, pub: out};
    var KmOaa: mM {init: 0.00064, priv: out, pub: out};
    var KmpCa: mM {init: 0.0005, priv: out, pub: out};
    var KmSucc: mM {init: 0.03, priv: out, pub: out};
    var Kna: mM {init: 9.4, priv: out, pub: out};
    var kNaCa: uA_per_cm2 {init: 9000.0, priv: out, pub: out};
    var Knca: mM {init: 3.75E-4, priv: out, pub: out};
    var Ko: mM {init: 5.4, priv: out, pub: out};
    var Koff: dimensionless {init: 0.0399, priv: out, pub: out};
    var Krb: mM {init: 1.64269, priv: out, pub: out};
    var kres: dimensionless {init: 1.35E18, priv: out, pub: out};
    var kresf: dimensionless {init: 5.765E13, priv: out, pub: out};
    var ksat: dimensionless {init: 0.1, priv: out, pub: out};
    var kSDH: per_ms {init: 0.005, priv: out, pub: out};
    var KSLeq: dimensionless {init: 3.115, priv: out, pub: out};
    var KSR: dimensionless {init: 2.5, priv: out, pub: out};
    var ktrans: mM {init: 0.019, priv: out, pub: out};
    var kTrop_pn: per_ms {init: 0.04, priv: out, pub: out};
    var L: dimensionless {init: 110.0, priv: out, pub: out};
    var LTRPNtot: mM {init: 70E-3, priv: out, pub: out};
    var mcoop: dimensionless {init: 3.0, priv: out, pub: out};
    var Mg: mM {init: 0.4, priv: out, pub: out};
    var n: dimensionless {init: 3.0, priv: out, pub: out};
    var na: dimensionless {init: 2.8, priv: out, pub: out};
    var Nao: mM {init: 140.0, priv: out, pub: out};
    var ncoop: dimensionless {init: 4.0, priv: out, pub: out};
    var Nfb: dimensionless {init: 1.4, priv: out, pub: out};
    var nID: dimensionless {init: 2.0, priv: out, pub: out};
    var nKG: dimensionless {init: 1.2, priv: out, pub: out};
    var Nrb: dimensionless {init: 1.0, priv: out, pub: out};
    var omega: per_ms {init: 0.01, priv: out, pub: out};
    var p1: dimensionless {init: 1.346E-8, priv: out, pub: out};
    var p2: dimensionless {init: 7.739E-7, priv: out, pub: out};
    var p3: dimensionless {init: 6.65E-15, priv: out, pub: out};
    var pa: per_ms {init: 1.656E-8, priv: out, pub: out};
    var pb: per_ms {init: 3.373E-10, priv: out, pub: out};
    var pc1: per_ms {init: 9.651E-17, priv: out, pub: out};
    var pc2: per_ms {init: 4.585E-17, priv: out, pub: out};
    var PCa: cm_per_s {init: 0.00124, priv: out, pub: out};
    var Pi: mM {init: 2.0, priv: out, pub: out};
    var PK: cm_per_s {init: 1.11E-11, priv: out, pub: out};
    var PnsK: cm_per_s {init: 0.0, priv: out, pub: out};
    var PnsNa: cm_per_s {init: 1.75E-7, priv: out, pub: out};
    var r1: dimensionless {init: 2.077E-18, priv: out, pub: out};
    var r2: dimensionless {init: 1.728E-9, priv: out, pub: out};
    var r3: dimensionless {init: 1.059E-26, priv: out, pub: out};
    var ra: per_ms {init: 6.394E-13, priv: out, pub: out};
    var rb: per_ms {init: 1.762E-16, priv: out, pub: out};
    var rc1: per_ms {init: 2.656E-22, priv: out, pub: out};
    var rc2: per_ms {init: 8.632E-30, priv: out, pub: out};
    var rhoF1: mM {init: 0.05, priv: out, pub: out};
    var rhoREF: mM {init: 3.75E-4, priv: out, pub: out};
    var rhoREN: mM {init: 1.0E-1, priv: out, pub: out};
    var tautr: ms {init: 0.574713, priv: out, pub: out};
    var tauxfer: ms {init: 9.09091, priv: out, pub: out};
    var V_AM_scaler: dimensionless {init: 15.0, priv: out, pub: out};
    var V_AM_max: mM_per_ms {init: 0.00048, priv: out, pub: out};
    var v1: per_ms {init: 3.6, priv: out, pub: out};
    var VJSR: uL {init: 0.16E-6, priv: out, pub: out};
    var vmaxf: per_ms {init: 0.29892E-3, priv: out, pub: out};
    var vmaxr: per_ms {init: 0.31793E-3, priv: out, pub: out};
    var VmDT: mM_per_ms {init: 0.015, priv: out, pub: out};
    var VmNC: mM_per_ms {init: 0.625E-4, priv: out, pub: out};
    var Vmuni: mM_per_ms {init: 0.0275, priv: out, pub: out};
    var Vmyo: uL {init: 25.84E-6, priv: out, pub: out};
    var VNSR: uL {init: 1.4E-6, priv: out, pub: out};
    var VSS: uL {init: 0.495E-9, priv: out, pub: out};
    var zeta: N_per_mm2 {init: 0.1, priv: out, pub: out};
    var f_xb: per_ms {init: 0.05, priv: out, pub: out};
    var SL: um {init: 2.15, priv: out, pub: out};
    var gmin_xb: per_ms {init: 0.1, priv: out, pub: out};
    var zNa: dimensionless {init: 1, priv: out, pub: out};
    var zK: dimensionless {init: 1, priv: out, pub: out};
    var zCa: dimensionless {init: 2, priv: out, pub: out};
    var one: dimensionless {init: 1, priv: out, pub: out};
    var p_KNa: dimensionless {init: 0.01833, priv: out, pub: out};
  enddef;

  def comp initial_values as
    var ATPi_initial: dimensionless {init: 7.98691, priv: out, pub: out};
    var V_initial: dimensionless {init: -86.4154, priv: out, pub: out};
    var C1_RyR_initial: dimensionless {init: 0.748798, priv: out, pub: out};
    var C2_RyR_initial: dimensionless {init: 0.250904, priv: out, pub: out};
    var O2_RyR_initial: dimensionless {init: 3.5175e-10, priv: out, pub: out};
    var mNa_initial: dimensionless {init: 0.0327969, priv: out, pub: out};
    var hNa_initial: dimensionless {init: 0.988991, priv: out, pub: out};
    var jNa_initial: dimensionless {init: 0.992918, priv: out, pub: out};
    var xKs_initial: dimensionless {init: 0.000127552, priv: out, pub: out};
    var Open_initial: dimensionless {init: 6.96577e-24, priv: out, pub: out};
    var OCa_initial: dimensionless {init: 0, priv: out, pub: out};
    var yCa_initial: dimensionless {init: 0.941505, priv: out, pub: out};
    var Ki_initial: dimensionless {init: 148.065, priv: out, pub: out};
    var Nai_initial: dimensionless {init: 7.51215, priv: out, pub: out};
    var Cai_initial: dimensionless {init: 6.71512e-05, priv: out, pub: out};
    var ADPm_initial: dimensionless {init: 0.0258454, priv: out, pub: out};
    var Dpsi_initial: dimensionless {init: 164.073, priv: out, pub: out};
    var NADH_initial: dimensionless {init: 7.76311, priv: out, pub: out};
    var Oaa_initial: dimensionless {init: 1.08962e-07, priv: out, pub: out};
    var AKG_initial: dimensionless {init: 0.000610554, priv: out, pub: out};
    var SCoA_initial: dimensionless {init: 0.247364, priv: out, pub: out};
    var Succ_initial: dimensionless {init: 0.000394005, priv: out, pub: out};
    var FUM_initial: dimensionless {init: 0.0191924, priv: out, pub: out};
    var MAL_initial: dimensionless {init: 0.00925885, priv: out, pub: out};
    var ISOC_initial: dimensionless {init: 0.496682, priv: out, pub: out};
    var Cam_initial: dimensionless {init: 0.000137836, priv: out, pub: out};
    var CaNSR_initial: dimensionless {init: 0.255288, priv: out, pub: out};
    var CaJSR_initial: dimensionless {init: 0.255138, priv: out, pub: out};
    var CaSS_initial: dimensionless {init: 8.25461e-05, priv: out, pub: out};
    var N1_initial: dimensionless {init: 5.71121e-05, priv: out, pub: out};
    var P0_initial: dimensionless {init: 6.63724e-05, priv: out, pub: out};
    var P1_initial: dimensionless {init: 5.73114e-05, priv: out, pub: out};
    var P2_initial: dimensionless {init: 0.000106992, priv: out, pub: out};
    var P3_initial: dimensionless {init: 9.31884e-05, priv: out, pub: out};
    var LTRPNCa_initial: dimensionless {init: 0.0100663, priv: out, pub: out};
    var HTRPNCa_initial: dimensionless {init: 0.133453, priv: out, pub: out};
    var C1_initial: dimensionless {init: 1.04295e-05, priv: out, pub: out};
    var CCa0_initial: dimensionless {init: 0.00156783, priv: out, pub: out};
    var C0_initial: dimensionless {init: 0.998424, priv: out, pub: out};
    var C2_initial: dimensionless {init: 4.08551e-11, priv: out, pub: out};
    var CCa1_initial: dimensionless {init: 6.55103e-08, priv: out, pub: out};
    var C3_initial: dimensionless {init: 7.11287e-17, priv: out, pub: out};
    var CCa2_initial: dimensionless {init: 1.02648e-12, priv: out, pub: out};
    var C4_initial: dimensionless {init: 4.64382e-23, priv: out, pub: out};
    var CCa3_initial: dimensionless {init: 7.14846e-18, priv: out, pub: out};
    var CCa4_initial: dimensionless {init: 1.86682e-23, priv: out, pub: out};
    var CrPi_mito_initial: dimensionless {init: 19.4385, priv: out, pub: out};
    var CrPi_cyto_initial: dimensionless {init: 19.4302, priv: out, pub: out};
    var ATPi_cyto_initial: dimensionless {init: 7.97824, priv: out, pub: out};
    var ASP_initial: dimensionless {init: 0.0502614, priv: out, pub: out};
    var N0_initial: dimensionless {init: 0.999618, priv: out, pub: out};
  enddef;

  def comp model_1 as
    var time: dimensionless {priv: out, pub: in};
    var Istim: dimensionless {priv: out, pub: in};
    var Faraday: C_per_mmol {priv: out, pub: in};
    var R: J_per_mol_per_K {priv: out, pub: in};
    var T: K {priv: out, pub: in};
    var clamp_ATPi: dimensionless {priv: out, pub: in};
    var clamp_ATPi_cyto: dimensionless {priv: out, pub: in};
    var LHospitalThreshold: mV {priv: out, pub: in};
    var kt_2: dimensionless {priv: out, pub: in};
    var kf_2: dimensionless {priv: out, pub: in};
    var kf_3: dimensionless {priv: out, pub: in};
    var keq: dimensionless {priv: out, pub: in};
    var CRT_cyto: mM {priv: out, pub: in};
    var CRT_mito: mM {priv: out, pub: in};
    var VATPase_cyto: dimensionless {priv: out, pub: in};
    var Acap: cm2 {priv: out, pub: in};
    var AcCoA: mM {priv: out, pub: in};
    var aL: dimensionless {priv: out, pub: in};
    var b: dimensionless {priv: out, pub: in};
    var bL: dimensionless {priv: out, pub: in};
    var C_m: uF_per_cm2 {priv: out, pub: in};
    var Cao: mM {priv: out, pub: in};
    var CIK: mM {priv: out, pub: in};
    var Cm: mM {priv: out, pub: in};
    var CMDNtot: mM {priv: out, pub: in};
    var Cmito: mM_per_mV {priv: out, pub: in};
    var CPN: mM {priv: out, pub: in};
    var CoA: mM {priv: out, pub: in};
    var CSQNtot: mM {priv: out, pub: in};
    var DpH: pH_units {priv: out, pub: in};
    var Dpsio: mV {priv: out, pub: in};
    var eta: dimensionless {priv: out, pub: in};
    var EtCS: mM {priv: out, pub: in};
    var EtID: mM {priv: out, pub: in};
    var EtKG: mM {priv: out, pub: in};
    var EtMD: mM {priv: out, pub: in};
    var EtSDH: mM {priv: out, pub: in};
    var FAD: mM {priv: out, pub: in};
    var FADH2: mM {priv: out, pub: in};
    var fL: per_ms {priv: out, pub: in};
    var fm: dimensionless {priv: out, pub: in};
    var fprime: per_ms {priv: out, pub: in};
    var g: dimensionless {priv: out, pub: in};
    var G_Cab: mS_per_cm2 {priv: out, pub: in};
    var G_Kp: mS_per_cm2 {priv: out, pub: in};
    var G_Na: mS_per_cm2 {priv: out, pub: in};
    var G_Nab: mS_per_cm2 {priv: out, pub: in};
    var gh: mM_per_ms_per_mV {priv: out, pub: in};
    var gL: per_ms {priv: out, pub: in};
    var GLU: mM {priv: out, pub: in};
    var gprime: per_ms {priv: out, pub: in};
    var H: mM {priv: out, pub: in};
    var hm: dimensionless {priv: out, pub: in};
    var HTRPNtot: mM {priv: out, pub: in};
    var ICahalf: uA_per_cm2 {priv: out, pub: in};
    var INaKmax: uA_per_cm2 {priv: out, pub: in};
    var IpCamax: uA_per_cm2 {priv: out, pub: in};
    var KAATeq: dimensionless {priv: out, pub: in};
    var KaCa: mM {priv: out, pub: in};
    var KACOeq: dimensionless {priv: out, pub: in};
    var kact: mM {priv: out, pub: in};
    var KADP: mM {priv: out, pub: in};
    var kaminus: per_ms {priv: out, pub: in};
    var kaplus: per_mM4_per_ms {priv: out, pub: in};
    var kbminus: per_ms {priv: out, pub: in};
    var kbplus: per_mM3_per_ms {priv: out, pub: in};
    var Kca: mM {priv: out, pub: in};
    var kcminus: per_ms {priv: out, pub: in};
    var kcnsASP: per_ms {priv: out, pub: in};
    var kcplus: per_ms {priv: out, pub: in};
    var KCS: per_ms {priv: out, pub: in};
    var kf1: dimensionless {priv: out, pub: in};
    var kfAAT: per_ms {priv: out, pub: in};
    var kfACO: per_ms {priv: out, pub: in};
    var Kfb: mM {priv: out, pub: in};
    var kfFH: per_ms {priv: out, pub: in};
    var KFHeq: dimensionless {priv: out, pub: in};
    var kfSL: per_mM_per_ms {priv: out, pub: in};
    var kh_1: mM {priv: out, pub: in};
    var kh_2: mM {priv: out, pub: in};
    var Kh1: mM {priv: out, pub: in};
    var Kh2: mM {priv: out, pub: in};
    var Kh3: mM {priv: out, pub: in};
    var Kh4: mM {priv: out, pub: in};
    var khtrpn_minus: per_ms {priv: out, pub: in};
    var khtrpn_plus: per_mM_per_ms {priv: out, pub: in};
    var Ki_AM: mM {priv: out, pub: in};
    var Ki_prime_SR: mM {priv: out, pub: in};
    var Ki_SR: mM {priv: out, pub: in};
    var Ki1AD_NaK: mM {priv: out, pub: in};
    var KiADP_CaP: mM {priv: out, pub: in};
    var kIDH: per_ms {priv: out, pub: in};
    var KidhNADH: mM {priv: out, pub: in};
    var KiFUM: mM {priv: out, pub: in};
    var Kioaa: mM {priv: out, pub: in};
    var KiOxaa: mM {priv: out, pub: in};
    var kKGDH: per_ms {priv: out, pub: in};
    var kltrpn_plus: per_mM_per_ms {priv: out, pub: in};
    var kltrpn_minus: per_ms {priv: out, pub: in};
    var Km1AT_NaK: mM {priv: out, pub: in};
    var Km1ATP_CaP: mM {priv: out, pub: in};
    var Km2ATP_CaP: mM {priv: out, pub: in};
    var KmAcCoA: mM {priv: out, pub: in};
    var Kmal: mM {priv: out, pub: in};
    var KmATP_AM: mM {priv: out, pub: in};
    var KmATP_SR: mM {priv: out, pub: in};
    var KmCMDN: mM {priv: out, pub: in};
    var KmCa: mM {priv: out, pub: in};
    var KmCSQN: mM {priv: out, pub: in};
    var kMDH: per_ms {priv: out, pub: in};
    var Kmg: mM {priv: out, pub: in};
    var KmIDNAD: mM {priv: out, pub: in};
    var Kmiso: mM {priv: out, pub: in};
    var KmKG: mM {priv: out, pub: in};
    var KmKGNAD: mM {priv: out, pub: in};
    var KmKo: mM {priv: out, pub: in};
    var KmmNAD: mM {priv: out, pub: in};
    var KmNa: mM {priv: out, pub: in};
    var KmNai: mM {priv: out, pub: in};
    var KmnsCa: mM {priv: out, pub: in};
    var KmOaa: mM {priv: out, pub: in};
    var KmpCa: mM {priv: out, pub: in};
    var KmSucc: mM {priv: out, pub: in};
    var Kna: mM {priv: out, pub: in};
    var kNaCa: uA_per_cm2 {priv: out, pub: in};
    var Knca: mM {priv: out, pub: in};
    var Ko: mM {priv: out, pub: in};
    var Koff: dimensionless {priv: out, pub: in};
    var Krb: mM {priv: out, pub: in};
    var kres: dimensionless {priv: out, pub: in};
    var kresf: dimensionless {priv: out, pub: in};
    var ksat: dimensionless {priv: out, pub: in};
    var kSDH: per_ms {priv: out, pub: in};
    var KSLeq: dimensionless {priv: out, pub: in};
    var KSR: dimensionless {priv: out, pub: in};
    var ktrans: mM {priv: out, pub: in};
    var kTrop_pn: per_ms {priv: out, pub: in};
    var L: dimensionless {priv: out, pub: in};
    var LTRPNtot: mM {priv: out, pub: in};
    var mcoop: dimensionless {priv: out, pub: in};
    var Mg: mM {priv: out, pub: in};
    var n: dimensionless {priv: out, pub: in};
    var na: dimensionless {priv: out, pub: in};
    var Nao: mM {priv: out, pub: in};
    var ncoop: dimensionless {priv: out, pub: in};
    var Nfb: dimensionless {priv: out, pub: in};
    var nID: dimensionless {priv: out, pub: in};
    var nKG: dimensionless {priv: out, pub: in};
    var Nrb: dimensionless {priv: out, pub: in};
    var omega: per_ms {priv: out, pub: in};
    var p1: dimensionless {priv: out, pub: in};
    var p2: dimensionless {priv: out, pub: in};
    var p3: dimensionless {priv: out, pub: in};
    var pa: per_ms {priv: out, pub: in};
    var pb: per_ms {priv: out, pub: in};
    var pc1: per_ms {priv: out, pub: in};
    var pc2: per_ms {priv: out, pub: in};
    var PCa: cm_per_s {priv: out, pub: in};
    var Pi: mM {priv: out, pub: in};
    var PK: cm_per_s {priv: out, pub: in};
    var PnsK: cm_per_s {priv: out, pub: in};
    var PnsNa: cm_per_s {priv: out, pub: in};
    var r1: dimensionless {priv: out, pub: in};
    var r2: dimensionless {priv: out, pub: in};
    var r3: dimensionless {priv: out, pub: in};
    var ra: per_ms {priv: out, pub: in};
    var rb: per_ms {priv: out, pub: in};
    var rc1: per_ms {priv: out, pub: in};
    var rc2: per_ms {priv: out, pub: in};
    var rhoF1: mM {priv: out, pub: in};
    var rhoREF: mM {priv: out, pub: in};
    var rhoREN: mM {priv: out, pub: in};
    var tautr: ms {priv: out, pub: in};
    var tauxfer: ms {priv: out, pub: in};
    var V_AM_scaler: dimensionless {priv: out, pub: in};
    var V_AM_max: mM_per_ms {priv: out, pub: in};
    var v1: per_ms {priv: out, pub: in};
    var VJSR: uL {priv: out, pub: in};
    var vmaxf: per_ms {priv: out, pub: in};
    var vmaxr: per_ms {priv: out, pub: in};
    var VmDT: mM_per_ms {priv: out, pub: in};
    var VmNC: mM_per_ms {priv: out, pub: in};
    var Vmuni: mM_per_ms {priv: out, pub: in};
    var Vmyo: uL {priv: out, pub: in};
    var VNSR: uL {priv: out, pub: in};
    var VSS: uL {priv: out, pub: in};
    var zeta: N_per_mm2 {priv: out, pub: in};
    var f_xb: per_ms {priv: out, pub: in};
    var SL: um {priv: out, pub: in};
    var gmin_xb: per_ms {priv: out, pub: in};
    var zNa: dimensionless {priv: out, pub: in};
    var zK: dimensionless {priv: out, pub: in};
    var zCa: dimensionless {priv: out, pub: in};
    var one: dimensionless {priv: out, pub: in};
    var p_KNa: dimensionless {priv: out, pub: in};
    var ATPi_initial: dimensionless {priv: out, pub: in};
    var V_initial: dimensionless {priv: out, pub: in};
    var C1_RyR_initial: dimensionless {priv: out, pub: in};
    var C2_RyR_initial: dimensionless {priv: out, pub: in};
    var O2_RyR_initial: dimensionless {priv: out, pub: in};
    var mNa_initial: dimensionless {priv: out, pub: in};
    var hNa_initial: dimensionless {priv: out, pub: in};
    var jNa_initial: dimensionless {priv: out, pub: in};
    var xKs_initial: dimensionless {priv: out, pub: in};
    var Open_initial: dimensionless {priv: out, pub: in};
    var OCa_initial: dimensionless {priv: out, pub: in};
    var yCa_initial: dimensionless {priv: out, pub: in};
    var Ki_initial: dimensionless {priv: out, pub: in};
    var Nai_initial: dimensionless {priv: out, pub: in};
    var Cai_initial: dimensionless {priv: out, pub: in};
    var ADPm_initial: dimensionless {priv: out, pub: in};
    var Dpsi_initial: dimensionless {priv: out, pub: in};
    var NADH_initial: dimensionless {priv: out, pub: in};
    var Oaa_initial: dimensionless {priv: out, pub: in};
    var AKG_initial: dimensionless {priv: out, pub: in};
    var SCoA_initial: dimensionless {priv: out, pub: in};
    var Succ_initial: dimensionless {priv: out, pub: in};
    var FUM_initial: dimensionless {priv: out, pub: in};
    var MAL_initial: dimensionless {priv: out, pub: in};
    var ISOC_initial: dimensionless {priv: out, pub: in};
    var Cam_initial: dimensionless {priv: out, pub: in};
    var CaNSR_initial: dimensionless {priv: out, pub: in};
    var CaJSR_initial: dimensionless {priv: out, pub: in};
    var CaSS_initial: dimensionless {priv: out, pub: in};
    var N1_initial: dimensionless {priv: out, pub: in};
    var P0_initial: dimensionless {priv: out, pub: in};
    var P1_initial: dimensionless {priv: out, pub: in};
    var P2_initial: dimensionless {priv: out, pub: in};
    var P3_initial: dimensionless {priv: out, pub: in};
    var LTRPNCa_initial: dimensionless {priv: out, pub: in};
    var HTRPNCa_initial: dimensionless {priv: out, pub: in};
    var C1_initial: dimensionless {priv: out, pub: in};
    var CCa0_initial: dimensionless {priv: out, pub: in};
    var C0_initial: dimensionless {priv: out, pub: in};
    var C2_initial: dimensionless {priv: out, pub: in};
    var CCa1_initial: dimensionless {priv: out, pub: in};
    var C3_initial: dimensionless {priv: out, pub: in};
    var CCa2_initial: dimensionless {priv: out, pub: in};
    var C4_initial: dimensionless {priv: out, pub: in};
    var CCa3_initial: dimensionless {priv: out, pub: in};
    var CCa4_initial: dimensionless {priv: out, pub: in};
    var CrPi_mito_initial: dimensionless {priv: out, pub: in};
    var CrPi_cyto_initial: dimensionless {priv: out, pub: in};
    var ATPi_cyto_initial: dimensionless {priv: out, pub: in};
    var ASP_initial: dimensionless {priv: out, pub: in};
    var N0_initial: dimensionless {priv: out, pub: in};
  enddef;

  def comp computed_constants as
    var Vtotal: uL {priv: out, pub: out};
    var Vmito: uL {priv: out, pub: out};
    var f_01: per_ms {priv: out, pub: out};
    var f_12: per_ms {priv: out, pub: out};
    var f_23: per_ms {priv: out, pub: out};
    var g0_01: per_ms {priv: out, pub: out};
    var g0_12: per_ms {priv: out, pub: out};
    var g0_23: per_ms {priv: out, pub: out};
    var paths: per_ms3 {priv: out, pub: out};
    var P1max: dimensionless {priv: out, pub: out};
    var P2max: dimensionless {priv: out, pub: out};
    var P3max: dimensionless {priv: out, pub: out};
    var Fmax: dimensionless {priv: out, pub: out};
    var fnormmax: dimensionless {priv: out, pub: out};
    var SLnorm: dimensionless {priv: out, pub: out};
    var Ktrop_Ca: mM {priv: out, pub: out};
    var Ktrop_half: dimensionless {priv: out, pub: out};
    var Ntrop: dimensionless {priv: out, pub: out};
    var fnormmax2: dimensionless {priv: out, pub: out};
    var La: um {priv: out, pub: out};
    var Lm_prime: um {priv: out, pub: out};
    var Lz: um {priv: out, pub: out};
    var Lb: um {priv: out, pub: out};
    var Lm: um {priv: out, pub: out};
    var mod_factor: dimensionless {priv: out, pub: out};
    var g_01_mod: per_ms {priv: out, pub: out};
    var g_12_mod: per_ms {priv: out, pub: out};
    var g_23_mod: per_ms {priv: out, pub: out};
    var g_01_off: per_ms {priv: out, pub: out};
    var g_01_off_mod: per_ms {priv: out, pub: out};
    var RT_over_F: mV {priv: out, pub: out};
    var G_Ks: mS_per_cm2 {priv: out, pub: out};
    var G_K1: mS_per_cm2 {priv: out, pub: out};
    var inv_5p98: dimensionless {priv: out, pub: out};
    var FaradayE3: C_per_mol {priv: out, pub: out};
    var Cao_341: mM {priv: out, pub: out};
    var ICamax_LHospital: uA_per_cm2 {priv: out, pub: out};
    var Pca_4En3: cm_per_ms {priv: out, pub: out};
    var F_over_RT: per_mV {priv: out, pub: out};
    var inv_ICahalf: cm2_per_uA {priv: out, pub: out};
    var PKFe3: C_cm_per_s_per_mol {priv: out, pub: out};
    var sigma: dimensionless {priv: out, pub: out};
    var inv_KmNai: per_mM {priv: out, pub: out};
    var INaKmax_Ko_Ko_KmKo: uA_per_cm2 {priv: out, pub: out};
    var inv_Ki1AD_NaK: per_mM {priv: out, pub: out};
    var eta_1: dimensionless {priv: out, pub: out};
    var Nao_p3: mM2 {priv: out, pub: out};
    var KmCa_Cao: mM3_cm2_per_uA {priv: out, pub: out};
    var KmCa_Cao_ksat: mM3_cm2_per_uA {priv: out, pub: out};
    var inv_KiADP_CaP: mM {priv: out, pub: out};
    var KmnsCa_p3: mM3 {priv: out, pub: out};
    var V_AM_scaler_max_1_f_01_12_23: mM_per_ms4 {priv: out, pub: out};
    var KmATP_AM_Ki_AM: dimensionless {priv: out, pub: out};
    var DmuH_Constant: mV {priv: out, pub: out};
    var VCS_C1: mM_per_ms {priv: out, pub: out};
    var one_inv_KACOeq: dimensionless {priv: out, pub: out};
    var VIDH_Constant: dimensionless {priv: out, pub: out};
    var kIDH_EtID: mM_per_ms {priv: out, pub: out};
    var inv_KADP: per_mM {priv: out, pub: out};
    var inv_KaCa: per_mM {priv: out, pub: out};
    var inv_KidhNADH: per_mM {priv: out, pub: out};
    var KmKGNAD_KmIDNAD: dimensionless {priv: out, pub: out};
    var Mg_Kmg_1: dimensionless {priv: out, pub: out};
    var Mg_Kmg_1_Kca: mM {priv: out, pub: out};
    var kKGDH_EtKG: mM_per_ms {priv: out, pub: out};
    var CoA_KSLeq: mM {priv: out, pub: out};
    var kSDH_EtSDH: mM_per_ms {priv: out, pub: out};
    var KmSucc_KiFUM: dimensionless {priv: out, pub: out};
    var inv_KiOxaa: per_mM {priv: out, pub: out};
    var kfFH_KFHeq: per_ms {priv: out, pub: out};
    var kMDH_Fh_EtMD: mM_per_ms {priv: out, pub: out};
    var Kmal_Kioaa: dimensionless {priv: out, pub: out};
    var VAAT_Constant: mM_per_ms {priv: out, pub: out};
    var kcnsASP_KAATeq_kfAAT: dimensionless {priv: out, pub: out};
    var KfAAT_GLU: per_ms_per_mM {priv: out, pub: out};
    var KfAAT_KAATeq: per_ms {priv: out, pub: out};
    var kres_sq_KmIDNAD: per_mM {priv: out, pub: out};
    var exp_6_FRT_Dpsio: dimensionless {priv: out, pub: out};
    var FRT_6_g: per_mV {priv: out, pub: out};
    var ra_rc1_exp_6_FRT_Dpsio: per_ms {priv: out, pub: out};
    var r1_exp_6_FRT_Dpsio: dimensionless {priv: out, pub: out};
    var rhoREN_ra_rc1_exp_6_FRT_Dpsio: mM_per_ms {priv: out, pub: out};
    var rhoREN_rc2: mM_per_ms {priv: out, pub: out};
    var rhoREN_ra: mM_per_ms {priv: out, pub: out};
    var rhoRen_6_ra: mM_per_ms {priv: out, pub: out};
    var rhoRen_6_ra_rb: mM_per_ms {priv: out, pub: out};
    var AREF: mV {priv: out, pub: out};
    var exp_AREF_FRT: dimensionless {priv: out, pub: out};
    var ra_rc2_exp_AREF_FRT: per_ms {priv: out, pub: out};
    var VFO_C1: per_ms {priv: out, pub: out};
    var ra_exp_AREF_FRT: per_ms {priv: out, pub: out};
    var ra_rb: per_ms {priv: out, pub: out};
    var VFO_VHFe_C1: per_ms {priv: out, pub: out};
    var r2_r3_exp_AREF_FRT: dimensionless {priv: out, pub: out};
    var exp_3_FRT_Dpsio: dimensionless {priv: out, pub: out};
    var FRT_3: per_mV {priv: out, pub: out};
    var kf1_Pi: mM {priv: out, pub: out};
    var VATPase_C1: per_ms {priv: out, pub: out};
    var pa_pb_3: per_ms {priv: out, pub: out};
    var pa_300: per_ms {priv: out, pub: out};
    var p1_exp_3_FRT_Dpsio: dimensionless {priv: out, pub: out};
    var hm_F_over_RT: per_mV {priv: out, pub: out};
    var VmDT_75: mM_per_ms {priv: out, pub: out};
    var VmDT_20: mM_per_ms {priv: out, pub: out};
    var inv_Kfb: per_mM {priv: out, pub: out};
    var inv_Krb: per_mM {priv: out, pub: out};
    var inv_tautr: per_ms {priv: out, pub: out};
    var inv_tauxfer: per_ms {priv: out, pub: out};
    var KmATP_SR_Ki_SR: dimensionless {priv: out, pub: out};
    var inv_Ki_prime_SR: per_mM {priv: out, pub: out};
    var alpha_SL_fnormmax2: dimensionless {priv: out, pub: out};
    var alpha_SL_fnormmax: dimensionless {priv: out, pub: out};
    var inv_LTRPNtot_Ktrop_half: per_mM {priv: out, pub: out};
    var kTrop_pn_f_01: per_ms {priv: out, pub: out};
    var kTrop_pn_f_12_g_01_mod: per_ms {priv: out, pub: out};
    var f_23_g_12_mod: per_ms {priv: out, pub: out};
    var CMDNtot_KmCMDN: mM2 {priv: out, pub: out};
    var CSQNtot_KmCSQN: mM2 {priv: out, pub: out};
    var inv_ktrans: per_mM {priv: out, pub: out};
    var inv_kact: per_mM {priv: out, pub: out};
    var Vmuni_ktrans: per_ms {priv: out, pub: out};
    var FRT2: per_mV {priv: out, pub: out};
    var b_05: dimensionless {priv: out, pub: out};
    var Acap_Vmyo_F: mmol_per_C_per_cm {priv: out, pub: out};
    var Acap_VSS_F: mmol_per_C_per_cm {priv: out, pub: out};
    var VJSR_VSS: dimensionless {priv: out, pub: out};
    var Vmyo_VSS: dimensionless {priv: out, pub: out};
    var Vmyo_VNSR: dimensionless {priv: out, pub: out};
    var VJSR_VNSR: dimensionless {priv: out, pub: out};
    var inv_C_m: cm2_per_uF {priv: out, pub: out};
    var inv_bL: dimensionless {priv: out, pub: out};
    var inv_Cmito: mV_per_mM {priv: out, pub: out};
    var two_b: dimensionless {priv: out, pub: out};
    var inv_keq: dimensionless {priv: out, pub: out};
    var zeta_alpha_SL_fnormmax: N_per_mm2 {priv: out, pub: out};
    var alpha_SL: dimensionless {priv: out, pub: out};
    var Vmyo: uL {pub: in};
    var VJSR: uL {pub: in};
    var VNSR: uL {pub: in};
    var VSS: uL {pub: in};
    var f_xb: per_ms {pub: in};
    var gmin_xb: per_ms {pub: in};
    var SL: um {pub: in};
    var kltrpn_minus: per_ms {pub: in};
    var kltrpn_plus: per_mM_per_ms {pub: in};
    var Faraday: C_per_mmol {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: K {pub: in};
    var Acap: cm2 {pub: in};
    var C_m: uF_per_cm2 {pub: in};
    var Cao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nao: mM {pub: in};
    var PCa: cm_per_s {pub: in};
    var ICahalf: uA_per_cm2 {pub: in};
    var PK: cm_per_s {pub: in};
    var KmNai: mM {pub: in};
    var INaKmax: uA_per_cm2 {pub: in};
    var KmKo: mM {pub: in};
    var Ki1AD_NaK: mM {pub: in};
    var eta: dimensionless {pub: in};
    var KmCa: mM {pub: in};
    var KmNa: mM {pub: in};
    var kNaCa: uA_per_cm2 {pub: in};
    var ksat: dimensionless {pub: in};
    var KiADP_CaP: mM {pub: in};
    var KmnsCa: mM {pub: in};
    var V_AM_scaler: dimensionless {pub: in};
    var V_AM_max: mM_per_ms {pub: in};
    var KmATP_AM: mM {pub: in};
    var Ki_AM: mM {pub: in};
    var DpH: pH_units {pub: in};
    var KCS: per_ms {pub: in};
    var EtCS: mM {pub: in};
    var AcCoA: mM {pub: in};
    var KmAcCoA: mM {pub: in};
    var KACOeq: dimensionless {pub: in};
    var H: mM {pub: in};
    var kh_1: mM {pub: in};
    var kh_2: mM {pub: in};
    var kIDH: per_ms {pub: in};
    var EtID: mM {pub: in};
    var KADP: mM {pub: in};
    var KaCa: mM {pub: in};
    var KidhNADH: mM {pub: in};
    var KmKGNAD: mM {pub: in};
    var KmIDNAD: mM {pub: in};
    var Mg: mM {pub: in};
    var Kmg: mM {pub: in};
    var Kca: mM {pub: in};
    var kKGDH: per_ms {pub: in};
    var EtKG: mM {pub: in};
    var CoA: mM {pub: in};
    var KSLeq: dimensionless {pub: in};
    var kSDH: per_ms {pub: in};
    var EtSDH: mM {pub: in};
    var KmSucc: mM {pub: in};
    var KiFUM: mM {pub: in};
    var KiOxaa: mM {pub: in};
    var kfFH: per_ms {pub: in};
    var KFHeq: dimensionless {pub: in};
    var Kh3: mM {pub: in};
    var Kh4: mM {pub: in};
    var Kh1: mM {pub: in};
    var Kh2: mM {pub: in};
    var Koff: dimensionless {pub: in};
    var kMDH: per_ms {pub: in};
    var EtMD: mM {pub: in};
    var Kmal: mM {pub: in};
    var Kioaa: mM {pub: in};
    var kfAAT: per_ms {pub: in};
    var GLU: mM {pub: in};
    var kcnsASP: per_ms {pub: in};
    var KAATeq: dimensionless {pub: in};
    var kres: dimensionless {pub: in};
    var Dpsio: mV {pub: in};
    var g: dimensionless {pub: in};
    var ra: per_ms {pub: in};
    var rc1: per_ms {pub: in};
    var r1: dimensionless {pub: in};
    var rhoREN: mM {pub: in};
    var rc2: per_ms {pub: in};
    var rb: per_ms {pub: in};
    var kresf: dimensionless {pub: in};
    var FADH2: mM {pub: in};
    var FAD: mM {pub: in};
    var r2: dimensionless {pub: in};
    var r3: dimensionless {pub: in};
    var kf1: dimensionless {pub: in};
    var Pi: mM {pub: in};
    var pa: per_ms {pub: in};
    var pc1: per_ms {pub: in};
    var pb: per_ms {pub: in};
    var p1: dimensionless {pub: in};
    var hm: dimensionless {pub: in};
    var VmDT: mM_per_ms {pub: in};
    var Kfb: mM {pub: in};
    var Krb: mM {pub: in};
    var tautr: ms {pub: in};
    var tauxfer: ms {pub: in};
    var KmATP_SR: mM {pub: in};
    var Ki_SR: mM {pub: in};
    var Ki_prime_SR: mM {pub: in};
    var LTRPNtot: mM {pub: in};
    var kTrop_pn: per_ms {pub: in};
    var CMDNtot: mM {pub: in};
    var KmCMDN: mM {pub: in};
    var CSQNtot: mM {pub: in};
    var KmCSQN: mM {pub: in};
    var ktrans: mM {pub: in};
    var kact: mM {pub: in};
    var Vmuni: mM_per_ms {pub: in};
    var b: dimensionless {pub: in};
    var bL: dimensionless {pub: in};
    var Cmito: mM_per_mV {pub: in};
    var keq: dimensionless {pub: in};
    var zeta: N_per_mm2 {pub: in};
    Vtotal = (Vmyo+VJSR+VNSR+VSS)/0.64{dimensionless};
    Vmito = Vtotal*0.36{dimensionless};
    f_01 = 3.0{dimensionless}*f_xb;
    f_12 = 10.0{dimensionless}*f_xb;
    f_23 = 7.0{dimensionless}*f_xb;
    g0_01 = 1.0{dimensionless}*gmin_xb;
    g0_12 = 2.0{dimensionless}*gmin_xb;
    g0_23 = 3.0{dimensionless}*gmin_xb;
    paths = g0_01*g0_12*g0_23+f_01*g0_12*g0_23+f_01*f_12*g0_23+f_01*f_12*f_23;
    P1max = f_01*(2.0{dimensionless}*gmin_xb)*(3.0{dimensionless}*gmin_xb)/paths;
    P2max = f_01*f_12*(3.0{dimensionless}*gmin_xb)/paths;
    P3max = f_01*f_12*f_23/paths;
    Fmax = P1max+2.0{dimensionless}*P2max+3.0{dimensionless}*P3max;
    fnormmax = Fmax/3.0{dimensionless};
    SLnorm = (SL-1.7{um})/0.6{um};
    Ktrop_Ca = kltrpn_minus/kltrpn_plus;
    Ktrop_half = 1.0{dimensionless}/(1.0{dimensionless}+Ktrop_Ca/(1.7{um}/1000.0{dimensionless}+(0.9{um}/1000.0{dimensionless}-1.7{um}/1000.0{dimensionless})/(2.3{um}-1.7{um})*(SL-1.7{um})));
    Ntrop = 3.5{per_um}*SL-2.0{dimensionless};
    fnormmax2 = P1max+P2max+P3max;
    La = 1.0{um};
    Lm_prime = 1.5{um};
    Lz = 0.1{um};
    Lb = 0.1{um};
    Lm = Lm_prime-Lb;
    mod_factor = 1.0{dimensionless}+(2.3{um}-SL)/pow((2.3{um}-1.7{um})/1.0{um}, 1.6{dimensionless});
    alpha_SL = sel
      case SL < 2.2{um}:
        min(1.0{dimensionless}, (SL-2.0{dimensionless}*La+Lm_prime-Lz)/Lm);
      otherwise:
        1.0{dimensionless}-(SL-2.2{um})/Lm;
    endsel;
    g_01_mod = g0_01*mod_factor;
    g_12_mod = g0_12*mod_factor;
    g_23_mod = g0_23*mod_factor;
    g_01_off = 30.0{dimensionless}/1000.0{ms};
    g_01_off_mod = g_01_off*mod_factor;
    RT_over_F = R*T/Faraday;
    G_Ks = 0.282{mS_per_cm2}*sqrt(Ko/5.4{mM});
    G_K1 = 0.75{mS_per_cm2}*sqrt(Ko/5.4{mM});
    inv_5p98 = 1.0{dimensionless}/5.98{dimensionless};
    FaradayE3 = 1000.0{mmol_per_mol}*Faraday;
    Cao_341 = Cao*341.0{dimensionless};
    ICamax_LHospital = 2.0{dimensionless}*PCa*1000.0{uA_per_mA}*Faraday*(1.0{mM}-341.0{dimensionless}*Cao);
    Pca_4En3 = 4.0{dimensionless}*1.0e-3{s_per_ms}*PCa;
    F_over_RT = 1.0{dimensionless}/RT_over_F;
    inv_ICahalf = 1.0{dimensionless}/ICahalf;
    PKFe3 = FaradayE3*PK;
    sigma = 0.0365{dimensionless}*((exp(Nao/67.3{mM})-1.0{mM})/7.0{mM});
    inv_KmNai = 1.0{dimensionless}/KmNai;
    INaKmax_Ko_Ko_KmKo = INaKmax*(Ko/(Ko+KmKo));
    inv_Ki1AD_NaK = 1.0{dimensionless}/Ki1AD_NaK;
    eta_1 = eta-1.0{dimensionless};
    Nao_p3 = pow(Nao, 3.0{dimensionless})/Cao;
    KmCa_Cao = (KmCa+Cao)*((pow(KmNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless}))/(kNaCa*Cao));
    KmCa_Cao_ksat = KmCa_Cao*ksat;
    inv_KiADP_CaP = 1.0{dimensionless}/KiADP_CaP;
    KmnsCa_p3 = pow(KmnsCa, 3.0{dimensionless});
    V_AM_scaler_max_1_f_01_12_23 = V_AM_scaler*(V_AM_max/(f_01+f_12+f_23));
    KmATP_AM_Ki_AM = KmATP_AM/Ki_AM;
    DmuH_Constant = -2.303{per_pH_units}*RT_over_F*DpH;
    VCS_C1 = KCS*EtCS*AcCoA/(KmAcCoA+AcCoA);
    one_inv_KACOeq = 1.0{dimensionless}+1.0{dimensionless}/KACOeq;
    VIDH_Constant = 1.0{dimensionless}+H/kh_1+kh_2/H;
    kIDH_EtID = kIDH*EtID;
    inv_KADP = 1.0{dimensionless}/KADP;
    inv_KaCa = 1.0{dimensionless}/KaCa;
    inv_KidhNADH = 1.0{dimensionless}/KidhNADH;
    KmKGNAD_KmIDNAD = KmKGNAD/KmIDNAD;
    Mg_Kmg_1 = Mg/Kmg+1.0{dimensionless};
    Mg_Kmg_1_Kca = Mg_Kmg_1/Kca;
    kKGDH_EtKG = kKGDH*EtKG;
    CoA_KSLeq = CoA/KSLeq;
    kSDH_EtSDH = kSDH*EtSDH;
    KmSucc_KiFUM = KmSucc/KiFUM;
    inv_KiOxaa = 1.0{dimensionless}/KiOxaa;
    kfFH_KFHeq = kfFH/KFHeq;
    kMDH_Fh_EtMD = sqr(1.0{dimensionless}/(1.0{dimensionless}+Kh3/H+Kh3*(Kh4/sqr(H))))*(1.0{dimensionless}/(1.0{dimensionless}+H/Kh1+sqr(H)/(Kh1*Kh2))+Koff)*kMDH*EtMD;
    Kmal_Kioaa = Kmal/Kioaa;
    VAAT_Constant = kfAAT*GLU*kcnsASP*(KAATeq/kfAAT);
    kcnsASP_KAATeq_kfAAT = kcnsASP*(KAATeq/kfAAT);
    KfAAT_GLU = kfAAT*GLU;
    KfAAT_KAATeq = kfAAT/KAATeq;
    kres_sq_KmIDNAD = kres*(kres/KmIDNAD);
    exp_6_FRT_Dpsio = exp(6.0{dimensionless}*Dpsio*F_over_RT);
    FRT_6_g = 6.0{dimensionless}*g*F_over_RT;
    ra_rc1_exp_6_FRT_Dpsio = ra+rc1*exp_6_FRT_Dpsio;
    r1_exp_6_FRT_Dpsio = r1*exp_6_FRT_Dpsio;
    rhoREN_ra_rc1_exp_6_FRT_Dpsio = 0.5{dimensionless}*rhoREN*ra_rc1_exp_6_FRT_Dpsio;
    rhoREN_rc2 = 0.5{dimensionless}*rhoREN*rc2;
    rhoREN_ra = 0.5{dimensionless}*rhoREN*ra;
    rhoRen_6_ra = 6.0{dimensionless}*rhoREN*ra;
    rhoRen_6_ra_rb = 6.0{dimensionless}*rhoREN*(ra+rb);
    AREF = RT_over_F*log(kresf*sqrt(FADH2/FAD));
    exp_AREF_FRT = exp(AREF*F_over_RT);
    ra_rc2_exp_AREF_FRT = 0.5{dimensionless}*(ra+rc2*exp_AREF_FRT);
    VFO_C1 = (ra+rc1*exp_6_FRT_Dpsio)*exp_AREF_FRT*0.5{dimensionless};
    ra_exp_AREF_FRT = 4.0{dimensionless}*ra*exp_AREF_FRT;
    ra_rb = 4.0{dimensionless}*(ra+rb);
    VFO_VHFe_C1 = (1.0{per_ms}+r1*exp_AREF_FRT)*exp_6_FRT_Dpsio;
    r2_r3_exp_AREF_FRT = r2+r3*exp_AREF_FRT;
    exp_3_FRT_Dpsio = exp(3.0{dimensionless}*Dpsio*F_over_RT);
    FRT_3 = 3.0{dimensionless}*F_over_RT;
    kf1_Pi = kf1/Pi;
    VATPase_C1 = 100.0{dimensionless}*pa+pc1*exp_3_FRT_Dpsio;
    pa_pb_3 = 3.0{dimensionless}*(pa+pb);
    pa_300 = 300.0{dimensionless}*pa;
    p1_exp_3_FRT_Dpsio = p1*exp_3_FRT_Dpsio;
    hm_F_over_RT = hm*F_over_RT;
    VmDT_75 = 0.75{dimensionless}*VmDT;
    VmDT_20 = 20.0{dimensionless}*VmDT;
    inv_Kfb = 1.0{dimensionless}/Kfb;
    inv_Krb = 1.0{dimensionless}/Krb;
    inv_tautr = 1.0{dimensionless}/tautr;
    inv_tauxfer = 1.0{dimensionless}/tauxfer;
    KmATP_SR_Ki_SR = KmATP_SR/Ki_SR;
    inv_Ki_prime_SR = 1.0{dimensionless}/Ki_prime_SR;
    alpha_SL_fnormmax2 = alpha_SL/fnormmax2;
    alpha_SL_fnormmax = alpha_SL/(fnormmax*3.0{dimensionless});
    inv_LTRPNtot_Ktrop_half = 1.0{dimensionless}/(LTRPNtot*Ktrop_half);
    kTrop_pn_f_01 = -kTrop_pn-f_01;
    kTrop_pn_f_12_g_01_mod = -(kTrop_pn+f_12+g_01_mod);
    f_23_g_12_mod = -(f_23+g_12_mod);
    CMDNtot_KmCMDN = CMDNtot*KmCMDN;
    CSQNtot_KmCSQN = CSQNtot*KmCSQN;
    inv_ktrans = 1.0{dimensionless}/ktrans;
    inv_kact = 1.0{dimensionless}/kact;
    Vmuni_ktrans = Vmuni/ktrans;
    FRT2 = 2.0{dimensionless}*F_over_RT;
    b_05 = b*0.5{dimensionless};
    Acap_Vmyo_F = Acap/(Vmyo*Faraday*1000.0{uL_per_cm3});
    Acap_VSS_F = Acap/(2.0{dimensionless}*VSS*Faraday*1000.0{uL_per_cm3});
    VJSR_VSS = VJSR/VSS;
    Vmyo_VSS = Vmyo/VSS;
    Vmyo_VNSR = Vmyo/VNSR;
    VJSR_VNSR = VJSR/VNSR;
    inv_C_m = 1.0{dimensionless}/C_m;
    inv_bL = 1.0{dimensionless}/bL;
    inv_Cmito = 1.0{dimensionless}/Cmito;
    two_b = 2.0{dimensionless}*b;
    inv_keq = 1.0{dimensionless}/keq;
    zeta_alpha_SL_fnormmax = zeta*alpha_SL_fnormmax;
  enddef;

  def comp model_2 as
    var ADP: dimensionless {priv: out, pub: out};
    var ATPi: dimensionless {init: 7.98691, priv: out, pub: out};
    var ATPi_initial: dimensionless {priv: out, pub: in};
    var clamp_ATPi: dimensionless {priv: out, pub: in};
    var inv_ATPi: dimensionless {priv: out, pub: out};
    var VF_over_RT: dimensionless {priv: out, pub: out};
    var V: dimensionless {init: -86.4154, priv: out, pub: out};
    var V_initial: dimensionless {priv: out, pub: in};
    var exp_VF_over_RT: dimensionless {priv: out, pub: out};
    var VFsq_over_RT: dimensionless {priv: out, pub: out};
    var exp2VFRT: dimensionless {priv: out, pub: out};
    var O1_RyR: dimensionless {priv: out, pub: out};
    var C1_RyR: dimensionless {init: 0.748798, priv: out, pub: out};
    var C1_RyR_initial: dimensionless {priv: out, pub: in};
    var C2_RyR: dimensionless {init: 0.250904, priv: out, pub: out};
    var C2_RyR_initial: dimensionless {priv: out, pub: in};
    var O2_RyR: dimensionless {init: 3.5175e-10, priv: out, pub: out};
    var O2_RyR_initial: dimensionless {priv: out, pub: in};
    var V_30: dimensionless {priv: out, pub: out};
    var V_E_K: dimensionless {priv: out, pub: out};
    var INa: dimensionless {priv: out, pub: out};
    var mNa: dimensionless {init: 0.0327969, priv: out, pub: out};
    var mNa_initial: dimensionless {priv: out, pub: in};
    var hNa: dimensionless {init: 0.988991, priv: out, pub: out};
    var hNa_initial: dimensionless {priv: out, pub: in};
    var jNa: dimensionless {init: 0.992918, priv: out, pub: out};
    var jNa_initial: dimensionless {priv: out, pub: in};
    var IKs: dimensionless {priv: out, pub: out};
    var xKs: dimensionless {init: 0.000127552, priv: out, pub: out};
    var xKs_initial: dimensionless {priv: out, pub: in};
    var K1Alpha: dimensionless {priv: out, pub: out};
    var K1Beta: dimensionless {priv: out, pub: out};
    var K1_inf: dimensionless {priv: out, pub: out};
    var IK1: dimensionless {priv: out, pub: out};
    var INab: dimensionless {priv: out, pub: out};
    var IKp: dimensionless {priv: out, pub: out};
    var ICamax: dimensionless {priv: out, pub: out};
    var ICaK: dimensionless {priv: out, pub: out};
    var Open: dimensionless {init: 6.96577e-24, priv: out, pub: out};
    var Open_initial: dimensionless {priv: out, pub: in};
    var OCa: dimensionless {init: 0, priv: out, pub: out};
    var OCa_initial: dimensionless {priv: out, pub: in};
    var yCa: dimensionless {init: 0.941505, priv: out, pub: out};
    var yCa_initial: dimensionless {priv: out, pub: in};
    var Ki: dimensionless {init: 148.065, priv: out, pub: out};
    var Ki_initial: dimensionless {priv: out, pub: in};
    var ICa: dimensionless {priv: out, pub: out};
    var NaiP1p5: dimensionless {priv: out, pub: out};
    var Nai: dimensionless {init: 7.51215, priv: out, pub: out};
    var Nai_initial: dimensionless {priv: out, pub: in};
    var INaK: dimensionless {priv: out, pub: out};
    var exp_eta_VF_over_RT: dimensionless {priv: out, pub: out};
    var exp_eta1_VF_over_RT: dimensionless {priv: out, pub: out};
    var INaCa: dimensionless {priv: out, pub: out};
    var Cai: dimensionless {init: 6.71512e-05, priv: out, pub: out};
    var Cai_initial: dimensionless {priv: out, pub: in};
    var ICab: dimensionless {priv: out, pub: out};
    var IpCa: dimensionless {priv: out, pub: out};
    var CaiP3: dimensionless {priv: out, pub: out};
    var common: dimensionless {priv: out, pub: out};
    var InsNa: dimensionless {priv: out, pub: out};
    var InsK: dimensionless {priv: out, pub: out};
    var InsCa: dimensionless {priv: out, pub: out};
    var V_AM: dimensionless {priv: out, pub: out};
    var ATPm: dimensionless {priv: out, pub: out};
    var ADPm: dimensionless {init: 0.0258454, priv: out, pub: out};
    var ADPm_initial: dimensionless {priv: out, pub: in};
    var DmuH: dimensionless {priv: out, pub: out};
    var Dpsi: dimensionless {init: 164.073, priv: out, pub: out};
    var Dpsi_initial: dimensionless {priv: out, pub: in};
    var NAD: dimensionless {priv: out, pub: out};
    var NADH: dimensionless {init: 7.76311, priv: out, pub: out};
    var NADH_initial: dimensionless {priv: out, pub: in};
    var KmIDNAD_NAD: dimensionless {priv: out, pub: out};
    var exp_FRT_6_g_DmuH: dimensionless {priv: out, pub: out};
    var FRT2_Dpsi: dimensionless {priv: out, pub: out};
    var VCS: dimensionless {priv: out, pub: out};
    var Oaa: dimensionless {init: 1.08962e-07, priv: out, pub: out};
    var Oaa_initial: dimensionless {priv: out, pub: in};
    var VACO: dimensionless {priv: out, pub: out};
    var AKG: dimensionless {init: 0.000610554, priv: out, pub: out};
    var AKG_initial: dimensionless {priv: out, pub: in};
    var SCoA: dimensionless {init: 0.247364, priv: out, pub: out};
    var SCoA_initial: dimensionless {priv: out, pub: in};
    var Succ: dimensionless {init: 0.000394005, priv: out, pub: out};
    var Succ_initial: dimensionless {priv: out, pub: in};
    var FUM: dimensionless {init: 0.0191924, priv: out, pub: out};
    var FUM_initial: dimensionless {priv: out, pub: in};
    var MAL: dimensionless {init: 0.00925885, priv: out, pub: out};
    var MAL_initial: dimensionless {priv: out, pub: in};
    var ISOC: dimensionless {init: 0.496682, priv: out, pub: out};
    var ISOC_initial: dimensionless {priv: out, pub: in};
    var Fa: dimensionless {priv: out, pub: out};
    var Cam: dimensionless {init: 0.000137836, priv: out, pub: out};
    var Cam_initial: dimensionless {priv: out, pub: in};
    var Fi: dimensionless {priv: out, pub: out};
    var VIDH: dimensionless {priv: out, pub: out};
    var a__1: dimensionless {priv: out, pub: out};
    var VKGDH: dimensionless {priv: out, pub: out};
    var VSL: dimensionless {priv: out, pub: out};
    var VSDH: dimensionless {priv: out, pub: out};
    var VFH: dimensionless {priv: out, pub: out};
    var VMDH: dimensionless {priv: out, pub: out};
    var VAAT: dimensionless {priv: out, pub: out};
    var AREN: dimensionless {priv: out, pub: out};
    var denominator1: dimensionless {priv: out, pub: out};
    var denominator2: dimensionless {priv: out, pub: out};
    var denominator3: dimensionless {priv: out, pub: out};
    var VNO: dimensionless {priv: out, pub: out};
    var VHNe: dimensionless {priv: out, pub: out};
    var VHFe: dimensionless {priv: out, pub: out};
    var exp_3FRT_DmuH: dimensionless {priv: out, pub: out};
    var AF1: dimensionless {priv: out, pub: out};
    var VATPase: dimensionless {priv: out, pub: out};
    var Vhu: dimensionless {priv: out, pub: out};
    var ATPi_ADP: dimensionless {priv: out, pub: out};
    var ADPm_ATPm: dimensionless {priv: out, pub: out};
    var VANT: dimensionless {priv: out, pub: out};
    var Vhleak: dimensionless {priv: out, pub: out};
    var MAlpha: dimensionless {priv: out, pub: out};
    var MBeta: dimensionless {priv: out, pub: out};
    var inv_MBeta_MAlpha: dimensionless {priv: out, pub: out};
    var tmNa: dimensionless {priv: out, pub: out};
    var HAlpha: dimensionless {priv: out, pub: out};
    var HBeta: dimensionless {priv: out, pub: out};
    var JAlpha: dimensionless {priv: out, pub: out};
    var JBeta: dimensionless {priv: out, pub: out};
    var fb: dimensionless {priv: out, pub: out};
    var rb: per_ms {priv: out, pub: out};
    var CaNSR: dimensionless {init: 0.255288, priv: out, pub: out};
    var CaNSR_initial: dimensionless {priv: out, pub: in};
    var Jup: dimensionless {priv: out, pub: out};
    var Jrel: dimensionless {priv: out, pub: out};
    var CaJSR: dimensionless {init: 0.255138, priv: out, pub: out};
    var CaJSR_initial: dimensionless {priv: out, pub: in};
    var CaSS: dimensionless {init: 8.25461e-05, priv: out, pub: out};
    var CaSS_initial: dimensionless {priv: out, pub: in};
    var Jtr: dimensionless {priv: out, pub: out};
    var Jxfer: dimensionless {priv: out, pub: out};
    var P1_N1_P2_P3: dimensionless {priv: out, pub: out};
    var N1: dimensionless {init: 5.71121e-05, priv: out, pub: out};
    var N1_initial: dimensionless {priv: out, pub: in};
    var P0: dimensionless {init: 6.63724e-05, priv: out, pub: out};
    var P0_initial: dimensionless {priv: out, pub: in};
    var P1: dimensionless {init: 5.73114e-05, priv: out, pub: out};
    var P1_initial: dimensionless {priv: out, pub: in};
    var P2: dimensionless {init: 0.000106992, priv: out, pub: out};
    var P2_initial: dimensionless {priv: out, pub: in};
    var P3: dimensionless {init: 9.31884e-05, priv: out, pub: out};
    var P3_initial: dimensionless {priv: out, pub: in};
    var N1_differential: dimensionless {priv: out, pub: out};
    var P0_differential: dimensionless {priv: out, pub: out};
    var P1_differential: dimensionless {priv: out, pub: out};
    var P2_differential: dimensionless {priv: out, pub: out};
    var P3_differential: dimensionless {priv: out, pub: out};
    var FN_Ca: dimensionless {priv: out, pub: out};
    var force_norm: dimensionless {priv: out, pub: out};
    var force: dimensionless {priv: out, pub: out};
    var kTrop_np: dimensionless {priv: out, pub: out};
    var LTRPNCa: dimensionless {init: 0.0100663, priv: out, pub: out};
    var LTRPNCa_initial: dimensionless {priv: out, pub: in};
    var HTRPNCa: dimensionless {init: 0.133453, priv: out, pub: out};
    var HTRPNCa_initial: dimensionless {priv: out, pub: in};
    var LTRPNCa_differential: dimensionless {priv: out, pub: out};
    var HTRPNCa_differential: dimensionless {priv: out, pub: out};
    var Jtrpn: dimensionless {priv: out, pub: out};
    var beta_SS: dimensionless {priv: out, pub: out};
    var beta_JSR: dimensionless {priv: out, pub: out};
    var beta_i: dimensionless {priv: out, pub: out};
    var Cai_ktrans_plus1: dimensionless {priv: out, pub: out};
    var Cai_ktrans_plus1_p3: dimensionless {priv: out, pub: out};
    var Vuni: dimensionless {priv: out, pub: out};
    var VnaCa: dimensionless {priv: out, pub: out};
    var alpha: dimensionless {priv: out, pub: out};
    var beta: dimensionless {priv: out, pub: out};
    var alpha_prime: dimensionless {priv: out, pub: out};
    var beta_prime: dimensionless {priv: out, pub: out};
    var C0_to_C1: dimensionless {priv: out, pub: out};
    var C1_to_C2: dimensionless {priv: out, pub: out};
    var C2_to_C3: dimensionless {priv: out, pub: out};
    var C3_to_C4: dimensionless {priv: out, pub: out};
    var CCa0_to_CCa1: dimensionless {priv: out, pub: out};
    var CCa1_to_CCa2: dimensionless {priv: out, pub: out};
    var CCa2_to_CCa3: dimensionless {priv: out, pub: out};
    var CCa3_to_CCa4: dimensionless {priv: out, pub: out};
    var C1_to_C0: dimensionless {priv: out, pub: out};
    var C2_to_C1: dimensionless {priv: out, pub: out};
    var C3_to_C2: dimensionless {priv: out, pub: out};
    var C4_to_C3: dimensionless {priv: out, pub: out};
    var CCa1_to_CCa0: dimensionless {priv: out, pub: out};
    var CCa2_to_CCa1: dimensionless {priv: out, pub: out};
    var CCa3_to_CCa2: dimensionless {priv: out, pub: out};
    var CCa4_to_CCa3: dimensionless {priv: out, pub: out};
    var gamma: dimensionless {priv: out, pub: out};
    var C0_to_CCa0: dimensionless {priv: out, pub: out};
    var C1_to_CCa1: dimensionless {priv: out, pub: out};
    var C2_to_CCa2: dimensionless {priv: out, pub: out};
    var C3_to_CCa3: dimensionless {priv: out, pub: out};
    var C4_to_CCa4: dimensionless {priv: out, pub: out};
    var CCa0_to_C0: dimensionless {priv: out, pub: out};
    var CCa1_to_C1: dimensionless {priv: out, pub: out};
    var CCa2_to_C2: dimensionless {priv: out, pub: out};
    var CCa3_to_C3: dimensionless {priv: out, pub: out};
    var CCa4_to_C4: dimensionless {priv: out, pub: out};
    var C1: dimensionless {init: 1.04295e-05, priv: out, pub: out};
    var C1_initial: dimensionless {priv: out, pub: in};
    var CCa0: dimensionless {init: 0.00156783, priv: out, pub: out};
    var CCa0_initial: dimensionless {priv: out, pub: in};
    var C0: dimensionless {init: 0.998424, priv: out, pub: out};
    var C0_initial: dimensionless {priv: out, pub: in};
    var C2: dimensionless {init: 4.08551e-11, priv: out, pub: out};
    var C2_initial: dimensionless {priv: out, pub: in};
    var CCa1: dimensionless {init: 6.55103e-08, priv: out, pub: out};
    var CCa1_initial: dimensionless {priv: out, pub: in};
    var C3: dimensionless {init: 7.11287e-17, priv: out, pub: out};
    var C3_initial: dimensionless {priv: out, pub: in};
    var CCa2: dimensionless {init: 1.02648e-12, priv: out, pub: out};
    var CCa2_initial: dimensionless {priv: out, pub: in};
    var C4: dimensionless {init: 4.64382e-23, priv: out, pub: out};
    var C4_initial: dimensionless {priv: out, pub: in};
    var CCa3: dimensionless {init: 7.14846e-18, priv: out, pub: out};
    var CCa3_initial: dimensionless {priv: out, pub: in};
    var CCa4: dimensionless {init: 1.86682e-23, priv: out, pub: out};
    var CCa4_initial: dimensionless {priv: out, pub: in};
    var Vt_CRP2: dimensionless {priv: out, pub: out};
    var CrPi_mito: dimensionless {init: 19.4385, priv: out, pub: out};
    var CrPi_mito_initial: dimensionless {priv: out, pub: in};
    var CrPi_cyto: dimensionless {init: 19.4302, priv: out, pub: out};
    var CrPi_cyto_initial: dimensionless {priv: out, pub: in};
    var VCK_cyto: dimensionless {priv: out, pub: out};
    var ATPi_cyto: dimensionless {init: 7.97824, priv: out, pub: out};
    var ATPi_cyto_initial: dimensionless {priv: out, pub: in};
    var clamp_ATPi_cyto: dimensionless {priv: out, pub: in};
    var VCK_mito: dimensionless {priv: out, pub: out};
    var ASP: dimensionless {init: 0.0502614, priv: out, pub: out};
    var ASP_initial: dimensionless {priv: out, pub: in};
    var N0: dimensionless {init: 0.999618, priv: out, pub: out};
    var N0_initial: dimensionless {priv: out, pub: in};
    var Istim: dimensionless {pub: in};
    var LHospitalThreshold: mV {pub: in};
    var F_over_RT: per_mV {pub: in};
    var FaradayE3: C_per_mol {pub: in};
    var time: dimensionless {pub: in};
    var E_K: dimensionless {pub: in};
    var G_Na: mS_per_cm2 {pub: in};
    var E_Na: dimensionless {pub: in};
    var G_Ks: mS_per_cm2 {pub: in};
    var E_Ks: dimensionless {pub: in};
    var G_K1: mS_per_cm2 {pub: in};
    var G_Nab: mS_per_cm2 {pub: in};
    var G_Kp: mS_per_cm2 {pub: in};
    var inv_5p98: dimensionless {pub: in};
    var Pca_4En3: cm_per_ms {pub: in};
    var Cao_341: mM {pub: in};
    var PKFe3: C_cm_per_s_per_mol {pub: in};
    var Ko: mM {pub: in};
    var inv_ICahalf: cm2_per_uA {pub: in};
    var INaKmax_Ko_Ko_KmKo: uA_per_cm2 {pub: in};
    var sigma: dimensionless {pub: in};
    var Km1AT_NaK: mM {pub: in};
    var inv_Ki1AD_NaK: per_mM {pub: in};
    var eta: dimensionless {pub: in};
    var Nao_p3: mM2 {pub: in};
    var KmCa_Cao: mM3_cm2_per_uA {pub: in};
    var KmCa_Cao_ksat: mM3_cm2_per_uA {pub: in};
    var G_Cab: mS_per_cm2 {pub: in};
    var E_Ca: dimensionless {pub: in};
    var IpCamax: uA_per_cm2 {pub: in};
    var KmpCa: mM {pub: in};
    var Km1ATP_CaP: mM {pub: in};
    var inv_KiADP_CaP: mM {pub: in};
    var Km2ATP_CaP: mM {pub: in};
    var KmnsCa_p3: mM3 {pub: in};
    var PnsNa: cm_per_s {pub: in};
    var Nao: mM {pub: in};
    var PnsK: cm_per_s {pub: in};
    var V_AM_scaler_max_1_f_01_12_23: mM_per_ms4 {pub: in};
    var f_01: per_ms {pub: in};
    var f_12: per_ms {pub: in};
    var f_23: per_ms {pub: in};
    var KmATP_AM: mM {pub: in};
    var KmATP_AM_Ki_AM: dimensionless {pub: in};
    var Cm: mM {pub: in};
    var DmuH_Constant: mV {pub: in};
    var CPN: mM {pub: in};
    var KmIDNAD: mM {pub: in};
    var FRT_6_g: per_mV {pub: in};
    var FRT2: per_mV {pub: in};
    var VCS_C1: mM_per_ms {pub: in};
    var KmOaa: mM {pub: in};
    var kfACO: per_ms {pub: in};
    var CIK: mM {pub: in};
    var one_inv_KACOeq: dimensionless {pub: in};
    var inv_KADP: per_mM {pub: in};
    var inv_KaCa: per_mM {pub: in};
    var inv_KidhNADH: per_mM {pub: in};
    var kIDH_EtID: mM_per_ms {pub: in};
    var VIDH_Constant: dimensionless {pub: in};
    var Kmiso: mM {pub: in};
    var nID: dimensionless {pub: in};
    var Mg_Kmg_1: dimensionless {pub: in};
    var Mg_Kmg_1_Kca: mM {pub: in};
    var kKGDH_EtKG: mM_per_ms {pub: in};
    var KmKG: mM {pub: in};
    var nKG: dimensionless {pub: in};
    var KmKGNAD_KmIDNAD: dimensionless {pub: in};
    var kfSL: per_mM_per_ms {pub: in};
    var CoA_KSLeq: mM {pub: in};
    var kSDH_EtSDH: mM_per_ms {pub: in};
    var KmSucc: mM {pub: in};
    var KmSucc_KiFUM: dimensionless {pub: in};
    var inv_KiOxaa: per_mM {pub: in};
    var kfFH: per_ms {pub: in};
    var kfFH_KFHeq: per_ms {pub: in};
    var kMDH_Fh_EtMD: mM_per_ms {pub: in};
    var Kmal: mM {pub: in};
    var Kmal_Kioaa: dimensionless {pub: in};
    var KmmNAD: mM {pub: in};
    var VAAT_Constant: mM_per_ms {pub: in};
    var kcnsASP_KAATeq_kfAAT: dimensionless {pub: in};
    var kres_sq_KmIDNAD: per_mM {pub: in};
    var exp_6_FRT_Dpsio: dimensionless {pub: in};
    var r1_exp_6_FRT_Dpsio: dimensionless {pub: in};
    var r2: dimensionless {pub: in};
    var r3: dimensionless {pub: in};
    var rhoREN_ra_rc1_exp_6_FRT_Dpsio: mM_per_ms {pub: in};
    var rhoREN_rc2: mM_per_ms {pub: in};
    var rhoREN_ra: mM_per_ms {pub: in};
    var rhoRen_6_ra: mM_per_ms {pub: in};
    var rhoRen_6_ra_rb: mM_per_ms {pub: in};
    var rhoREF: mM {pub: in};
    var VFO_VHFe_C1: per_ms {pub: in};
    var r2_r3_exp_AREF_FRT: dimensionless {pub: in};
    var ra_exp_AREF_FRT: per_ms {pub: in};
    var ra_rb: per_ms {pub: in};
    var FRT_3: per_mV {pub: in};
    var kf1_Pi: mM {pub: in};
    var rhoF1: mM {pub: in};
    var exp_3_FRT_Dpsio: dimensionless {pub: in};
    var p1_exp_3_FRT_Dpsio: dimensionless {pub: in};
    var p2: dimensionless {pub: in};
    var p3: dimensionless {pub: in};
    var VATPase_C1: per_ms {pub: in};
    var pc2: per_ms {pub: in};
    var pa: per_ms {pub: in};
    var pa_300: per_ms {pub: in};
    var pa_pb_3: per_ms {pub: in};
    var VmDT_75: mM_per_ms {pub: in};
    var VmDT_20: mM_per_ms {pub: in};
    var hm_F_over_RT: per_mV {pub: in};
    var gh: mM_per_ms_per_mV {pub: in};
    var inv_Kfb: per_mM {pub: in};
    var Nfb: dimensionless {pub: in};
    var inv_Krb: per_mM {pub: in};
    var Nrb: dimensionless {pub: in};
    var KSR: dimensionless {pub: in};
    var vmaxf: per_ms {pub: in};
    var vmaxr: per_ms {pub: in};
    var KmATP_SR: mM {pub: in};
    var KmATP_SR_Ki_SR: dimensionless {pub: in};
    var inv_Ki_prime_SR: per_mM {pub: in};
    var v1: per_ms {pub: in};
    var inv_tautr: per_ms {pub: in};
    var inv_tauxfer: per_ms {pub: in};
    var alpha_SL_fnormmax2: dimensionless {pub: in};
    var alpha_SL_fnormmax: dimensionless {pub: in};
    var zeta_alpha_SL_fnormmax: N_per_mm2 {pub: in};
    var kTrop_pn: per_ms {pub: in};
    var inv_LTRPNtot_Ktrop_half: per_mM {pub: in};
    var Ntrop: dimensionless {pub: in};
    var kTrop_pn_f_01: per_ms {pub: in};
    var g_01_mod: per_ms {pub: in};
    var kTrop_pn_f_12_g_01_mod: per_ms {pub: in};
    var g_12_mod: per_ms {pub: in};
    var f_23_g_12_mod: per_ms {pub: in};
    var g_23_mod: per_ms {pub: in};
    var g_01_off_mod: per_ms {pub: in};
    var kltrpn_plus: per_mM_per_ms {pub: in};
    var LTRPNtot: mM {pub: in};
    var kltrpn_minus: per_ms {pub: in};
    var khtrpn_plus: per_mM_per_ms {pub: in};
    var HTRPNtot: mM {pub: in};
    var khtrpn_minus: per_ms {pub: in};
    var CMDNtot_KmCMDN: mM2 {pub: in};
    var KmCMDN: mM {pub: in};
    var CSQNtot_KmCSQN: mM2 {pub: in};
    var KmCSQN: mM {pub: in};
    var inv_ktrans: per_mM {pub: in};
    var Vmuni_ktrans: per_ms {pub: in};
    var L: dimensionless {pub: in};
    var inv_kact: per_mM {pub: in};
    var na: dimensionless {pub: in};
    var VmNC: mM_per_ms {pub: in};
    var b_05: dimensionless {pub: in};
    var Kna: mM {pub: in};
    var n: dimensionless {pub: in};
    var Knca: mM {pub: in};
    var Acap_Vmyo_F: mmol_per_C_per_cm {pub: in};
    var VJSR_VSS: dimensionless {pub: in};
    var Vmyo_VSS: dimensionless {pub: in};
    var Acap_VSS_F: mmol_per_C_per_cm {pub: in};
    var Vmyo_VNSR: dimensionless {pub: in};
    var VJSR_VNSR: dimensionless {pub: in};
    var inv_C_m: cm2_per_uF {pub: in};
    var kaplus: per_mM4_per_ms {pub: in};
    var ncoop: dimensionless {pub: in};
    var kaminus: per_ms {pub: in};
    var kbplus: per_mM3_per_ms {pub: in};
    var mcoop: dimensionless {pub: in};
    var kbminus: per_ms {pub: in};
    var kcplus: per_ms {pub: in};
    var kcminus: per_ms {pub: in};
    var aL: dimensionless {pub: in};
    var inv_bL: dimensionless {pub: in};
    var omega: per_ms {pub: in};
    var gL: per_ms {pub: in};
    var fL: per_ms {pub: in};
    var gprime: per_ms {pub: in};
    var fprime: per_ms {pub: in};
    var kt_2: dimensionless {pub: in};
    var kf_2: dimensionless {pub: in};
    var CRT_cyto: mM {pub: in};
    var inv_keq: dimensionless {pub: in};
    var kf_3: dimensionless {pub: in};
    var CRT_mito: mM {pub: in};
    var VATPase_cyto: dimensionless {pub: in};
    var fm: dimensionless {pub: in};
    var two_b: dimensionless {pub: in};
    var inv_Cmito: mV_per_mM {pub: in};
    var kcnsASP: per_ms {pub: in};
    var KmNai: mM {pub: in};
    ADP = 8.0{TODO}-ATPi;
    inv_ATPi = 1.0{TODO}/ATPi;
    VF_over_RT = V*F_over_RT;
    exp_VF_over_RT = exp(VF_over_RT);
    VFsq_over_RT = FaradayE3*VF_over_RT;
    exp2VFRT = exp_VF_over_RT*exp_VF_over_RT;
    O1_RyR = 1.0{TODO}-(C1_RyR+C2_RyR+O2_RyR);
    V_30 = V+30.0{TODO};
    V_E_K = V-E_K;
    INa = G_Na*mNa*mNa*mNa*hNa*jNa*(V-E_Na);
    IKs = G_Ks*xKs*xKs*((V-E_Ks)/(1.0{TODO}+exp((V-40.0{TODO})/40.0{TODO})));
    K1Alpha = 1.02{TODO}/(1.0{TODO}+exp(0.2385{TODO}*(V_E_K-59.215{TODO})));
    K1Beta = (0.4912{TODO}*exp(0.08032{TODO}*(V_E_K+5.476{TODO}))+exp(0.06175{TODO}*(V_E_K-594.31{TODO})))/(1.0{TODO}+exp(-0.5143{TODO}*(V-E_K+4.753{TODO})));
    K1_inf = K1Alpha/(K1Alpha+K1Beta);
    IK1 = G_K1*K1_inf*V_E_K;
    INab = G_Nab*(V-E_Na);
    IKp = G_Kp*(V_E_K/(1.0{TODO}+exp((7.488{TODO}-V)*inv_5p98)));
    ICamax = sel
      case abs(V) < LHospitalThreshold:
        Pca_4En3*(exp2VFRT-Cao_341)*(0.5{TODO}-0.02{TODO}*V);
      otherwise:
        Pca_4En3*VFsq_over_RT*((exp2VFRT-Cao_341)/(exp2VFRT-1.0{TODO}));
    endsel;
    ICaK = sel
      case abs(V) < LHospitalThreshold:
        PKFe3*(Open+OCa)*yCa*(Ki*exp2VFRT-Ko)*((0.5{TODO}-0.02{TODO}*V)/(1.0{TODO}+ICamax*inv_ICahalf));
      otherwise:
        PKFe3*(Open+OCa)*yCa*(Ki*exp2VFRT-Ko)*(VF_over_RT/((exp2VFRT-1.0{TODO})*(1.0{TODO}+ICamax*inv_ICahalf)));
    endsel;
    ICa = 6.0{TODO}*ICamax*yCa*Open;
    NaiP1p5 = sqrt(Nai*Nai*Nai);
    INaK = INaKmax_Ko_Ko_KmKo*(NaiP1p5/((NaiP1p5+sqrt(KmNai*KmNai*KmNai))*(1.0{TODO}+0.1245{TODO}*exp(-0.1{TODO}*VF_over_RT)+sigma/exp_VF_over_RT)*(1.0{TODO}+Km1AT_NaK*inv_ATPi*(1.0{TODO}+ADP*inv_Ki1AD_NaK))));
    exp_eta_VF_over_RT = exp(eta*VF_over_RT);
    exp_eta1_VF_over_RT = exp_eta_VF_over_RT/exp_VF_over_RT;
    INaCa = (exp_eta_VF_over_RT*Nai*Nai*Nai-exp_eta1_VF_over_RT*Nao_p3*Cai)/(KmCa_Cao+KmCa_Cao_ksat*exp_eta1_VF_over_RT);
    ICab = G_Cab*(V-E_Ca);
    IpCa = IpCamax*(Cai/(KmpCa+Cai))*(1.0{TODO}/(1.0{TODO}+Km1ATP_CaP*inv_ATPi*(1.0{TODO}+ADP*inv_KiADP_CaP))+1.0{TODO}/(1.0{TODO}+Km2ATP_CaP*inv_ATPi));
    CaiP3 = Cai*Cai*Cai;
    common = sel
      case abs(V) < LHospitalThreshold:
        0.75*CaiP3*((1.0-0.02*V)/(CaiP3+KmnsCa_p3));
      otherwise:
        0.75{TODO}*CaiP3*(VFsq_over_RT/((exp_VF_over_RT-1.0{TODO})*(CaiP3+KmnsCa_p3)));
    endsel;
    InsNa = PnsNa*common*(Nai*exp_VF_over_RT-Nao);
    InsK = PnsK*common*(Ki*exp_VF_over_RT-Ko);
    InsCa = InsNa+InsK;
    V_AM = V_AM_scaler_max_1_f_01_12_23*((f_01*P0+f_12*P1+f_23*P2)/(1.0{TODO}+inv_ATPi*(KmATP_AM+KmATP_AM_Ki_AM*ADP)));
    ATPm = Cm-ADPm;
    DmuH = DmuH_Constant+Dpsi;
    NAD = CPN-NADH;
    KmIDNAD_NAD = KmIDNAD/NAD;
    exp_FRT_6_g_DmuH = exp(FRT_6_g*DmuH);
    FRT2_Dpsi = FRT2*(Dpsi-91.0{TODO});
    VCS = VCS_C1*(Oaa/(Oaa+KmOaa));
    VACO = kfACO*(CIK-(AKG+SCoA+Succ+FUM+MAL+Oaa+ISOC*one_inv_KACOeq));
    Fa = 1.0{TODO}/((1.0{TODO}+ADPm*inv_KADP)*(1.0{TODO}+Cam*inv_KaCa));
    Fi = 1.0{TODO}+NADH*inv_KidhNADH;
    VIDH = kIDH_EtID/(VIDH_Constant+KmIDNAD_NAD*Fi+pow(Kmiso/ISOC, nID)*Fa*(1.0{TODO}+KmIDNAD_NAD*Fi));
    a__1 = Mg_Kmg_1+Mg_Kmg_1_Kca*Cam;
    VKGDH = kKGDH_EtKG*(a__1/(a__1+pow(KmKG/AKG, nKG)+KmKGNAD_KmIDNAD*KmIDNAD_NAD));
    VSL = kfSL*(SCoA*ADPm-CoA_KSLeq*Succ*ATPm);
    VSDH = kSDH_EtSDH*(Succ/(Succ+(KmSucc+KmSucc_KiFUM*FUM)*(1.0{TODO}+inv_KiOxaa*Oaa)));
    VFH = kfFH*FUM-kfFH_KFHeq*MAL;
    VMDH = kMDH_Fh_EtMD*MAL*(NAD/((MAL+Kmal+Oaa*Kmal_Kioaa)*(KmmNAD+NAD)));
    VAAT = VAAT_Constant*(Oaa/(kcnsASP_KAATeq_kfAAT+AKG));
    AREN = sqrt(NADH*kres_sq_KmIDNAD*KmIDNAD_NAD);
    denominator1 = 1.0{TODO}/(exp_6_FRT_Dpsio+r1_exp_6_FRT_Dpsio*AREN+(r2+r3*AREN)*exp_FRT_6_g_DmuH);
    VNO = ((rhoREN_ra_rc1_exp_6_FRT_Dpsio+rhoREN_rc2*exp_FRT_6_g_DmuH)*AREN-rhoREN_ra*exp_FRT_6_g_DmuH)*denominator1;
    VHNe = (rhoRen_6_ra*AREN-rhoRen_6_ra_rb*exp_FRT_6_g_DmuH)*denominator1;
    denominator2 = rhoREF/(VFO_VHFe_C1+r2_r3_exp_AREF_FRT*exp_FRT_6_g_DmuH);
    VHFe = (ra_exp_AREF_FRT-ra_rb*exp_FRT_6_g_DmuH)*denominator2;
    exp_3FRT_DmuH = exp(FRT_3*DmuH);
    AF1 = kf1_Pi*(ATPm/ADPm);
    denominator3 = -(rhoF1/(exp_3_FRT_Dpsio+p1_exp_3_FRT_Dpsio*AF1+(p2+p3*AF1)*exp_3FRT_DmuH));
    VATPase = ((VATPase_C1+pc2*exp_3FRT_DmuH)*AF1-pa*exp_3FRT_DmuH)*denominator3;
    Vhu = (pa_300+pa_300*AF1-pa_pb_3*exp_3FRT_DmuH)*denominator3;
    ATPi_ADP = ATPi/ADP;
    ADPm_ATPm = ADPm/ATPm;
    VANT = (VmDT_75-VmDT_20*ATPi_ADP*ADPm_ATPm*exp(-(F_over_RT*Dpsi)))/((1.0{TODO}+10.0{TODO}/9.0{TODO}*ATPi_ADP*exp(-(hm_F_over_RT*Dpsi)))*(1.0{TODO}+18.0{TODO}*ADPm_ATPm));
    Vhleak = gh*DmuH;
    MAlpha = sel
      case V == -47.13{mV}:
        3.2{TODO};
      otherwise:
        0.32{TODO}*((V+47.13{TODO})/(1.0{TODO}-exp(-0.1{TODO}*(V+47.13{TODO}))));
    endsel;
    MBeta = 0.08{TODO}*exp(-(V*(1.0{TODO}/11.0{TODO})));
    inv_MBeta_MAlpha = 1.0{TODO}/(MBeta+MAlpha);
    tmNa = sel
      case inv_MBeta_MAlpha < 0.03{TODO}:
        MAlpha*inv_MBeta_MAlpha;
      otherwise:
        mNa;
    endsel;
    HAlpha = sel
      case V < -40.0{mV}:
        0.135{TODO}*exp(-80.0{TODO}/6.8{TODO})*exp(-1.0{TODO}/6.8{TODO}*V);
      otherwise:
        0.0{TODO};
    endsel;
    HBeta = sel
      case V < -40.0{mV}:
        3.56{TODO}*exp(0.079{TODO}*V)+310000.0{TODO}*exp(0.35{TODO}*V);
      otherwise:
        1.0{TODO}/(0.13{TODO}+0.13{TODO}*exp(-(10.66{TODO}/11.1{TODO}))*exp(V*(-1.0{TODO}/11.1{TODO})));
    endsel;
    JAlpha = sel
      case V < -40.0{mV}:
        (-127140.0{TODO}*exp(0.2444{TODO}*V)-3.474e-5{TODO}*exp(-0.04391{TODO}*V))*((V+37.78{TODO})/(1.0{TODO}+exp(0.311{TODO}*(V+79.23{TODO}))));
      otherwise:
        0.0{TODO};
    endsel;
    JBeta = sel
      case V < -40.0{mV}:
        0.1212{TODO}*(exp(-0.01052{TODO}*V)/(1.0{TODO}+exp(-0.1378{TODO}*(V+40.14{TODO}))));
      otherwise:
        0.3{TODO}*(exp(-2.535e-7{TODO}*V)/(1.0{TODO}+exp(-0.1{TODO}*V-3.2{TODO})));
    endsel;
    ode(mNa, time) = MAlpha*(1.0{TODO}-tmNa)-MBeta*tmNa;
    ode(hNa, time) = HAlpha*(1.0{TODO}-hNa)-HBeta*hNa;
    ode(jNa, time) = JAlpha*(1.0{TODO}-jNa)-JBeta*jNa;
    ode(xKs, time) = 7.19e-5{TODO}*(V_30/(1.0{TODO}-exp(-0.148{TODO}*V_30)))*(1.0{TODO}-xKs)-1.31e-4{TODO}*(V_30/(exp(0.0687{TODO}*V_30)-1.0{TODO}))*xKs;
    fb = pow(Cai*inv_Kfb, Nfb);
    rb = pow(CaNSR*inv_Krb, Nrb);
    Jup = KSR*((vmaxf*fb-vmaxr*rb)/((1.0{TODO}+fb+rb)*(inv_ATPi*(KmATP_SR+ADP*KmATP_SR_Ki_SR)+1.0{TODO}+ADP*inv_Ki_prime_SR)));
    Jrel = v1*(O1_RyR+O2_RyR)*(CaJSR-CaSS);
    Jtr = (CaNSR-CaJSR)*inv_tautr;
    Jxfer = (CaSS-Cai)*inv_tauxfer;
    P1_N1_P2_P3 = P1+N1+P2+P3;
    FN_Ca = alpha_SL_fnormmax2*P1_N1_P2_P3;
    force_norm = alpha_SL_fnormmax*(P1_N1_P2_P3+P2+P3+P3);
    force = zeta_alpha_SL_fnormmax*(P1_N1_P2_P3+P2+P3+P3);
    kTrop_np = kTrop_pn*pow(LTRPNCa*inv_LTRPNtot_Ktrop_half, Ntrop);
    ode(P0, time) = P0_differential;
    P0_differential = kTrop_pn_f_01*P0+kTrop_np*N0+g_01_mod*P1;
    ode(P1, time) = P1_differential;
    P1_differential = kTrop_pn_f_12_g_01_mod*P1+kTrop_np*N1+f_01*P0+g_12_mod*P2;
    ode(P2, time) = P2_differential;
    P2_differential = f_23_g_12_mod*P2+f_12*P1+g_23_mod*P3;
    ode(P3, time) = P3_differential;
    P3_differential = -(g_23_mod*P3)+f_23*P2;
    ode(N1, time) = N1_differential;
    N1_differential = kTrop_pn*P1-(kTrop_np+g_01_off_mod)*N1;
    ode(N0, time) = -P0_differential-(P1_differential+P2_differential+P3_differential+N1_differential);
    ode(LTRPNCa, time) = LTRPNCa_differential;
    LTRPNCa_differential = kltrpn_plus*Cai*(LTRPNtot-LTRPNCa)-kltrpn_minus*LTRPNCa*(1.0{TODO}-2.0{TODO}/3.0{TODO}*FN_Ca);
    ode(HTRPNCa, time) = HTRPNCa_differential;
    HTRPNCa_differential = khtrpn_plus*Cai*(HTRPNtot-HTRPNCa)-khtrpn_minus*HTRPNCa;
    Jtrpn = LTRPNCa_differential+HTRPNCa_differential;
    beta_SS = 1.0{TODO}/(1.0{TODO}+CMDNtot_KmCMDN/((CaSS+KmCMDN)*(CaSS+KmCMDN)));
    beta_JSR = 1.0{TODO}/(1.0{TODO}+CSQNtot_KmCSQN/((CaJSR+KmCSQN)*(CaJSR+KmCSQN)));
    beta_i = 1.0{TODO}/(1.0{TODO}+CMDNtot_KmCMDN/((Cai+KmCMDN)*(Cai+KmCMDN)));
    Cai_ktrans_plus1 = 1.0{TODO}+Cai*inv_ktrans;
    Cai_ktrans_plus1_p3 = Cai_ktrans_plus1*Cai_ktrans_plus1*Cai_ktrans_plus1;
    Vuni = Vmuni_ktrans*Cai*FRT2_Dpsi*(Cai_ktrans_plus1_p3/((Cai_ktrans_plus1_p3*Cai_ktrans_plus1+L/pow(1.0{TODO}+Cai*inv_kact, na))*(1.0{TODO}-exp(-FRT2_Dpsi))));
    VnaCa = VmNC*exp(b_05*FRT2_Dpsi)*(Cam/(Cai*pow(1.0{TODO}+Kna/Nai, n)*(1.0{TODO}+Knca/Cam)));
    ode(Nai, time) = -((INa+INab+InsNa+3.0{TODO}*(INaCa+INaK))*Acap_Vmyo_F)-VnaCa*0.615{TODO};
    ode(Ki, time) = -((InsK+IKs+IK1+IKp+ICaK+Istim-2.0{TODO}*INaK)*Acap_Vmyo_F);
    ode(Cai, time) = beta_i*(Jxfer-(Jup+Jtrpn+0.25{TODO}*Acap_Vmyo_F*(ICab-2.0{TODO}*INaCa+IpCa))+(VnaCa-Vuni)*0.615{TODO});
    ode(CaSS, time) = beta_SS*(Jrel*VJSR_VSS-(Jxfer*Vmyo_VSS+ICa*Acap_VSS_F));
    ode(CaJSR, time) = beta_JSR*(Jtr-Jrel);
    ode(CaNSR, time) = Jup*Vmyo_VNSR-Jtr*VJSR_VNSR;
    ode(V, time) = -(inv_C_m*(INa+ICa+ICaK+IKs+IK1+IKp+INaCa+INaK+InsCa+IpCa+ICab+INab+Istim));
    ode(C1_RyR, time) = -(kaplus*pow(CaSS, ncoop)*C1_RyR)+kaminus*O1_RyR;
    ode(O2_RyR, time) = kbplus*pow(CaSS, mcoop)*O1_RyR-kbminus*O2_RyR;
    ode(C2_RyR, time) = kcplus*O1_RyR-kcminus*C2_RyR;
    alpha = 0.4{TODO}*exp((V+2.0{TODO})*0.1{TODO});
    beta = 0.05{TODO}*exp((V+2.0{TODO})*(-1.0{TODO}/13.0{TODO}));
    alpha_prime = aL*alpha;
    beta_prime = beta*inv_bL;
    C0_to_C1 = 4.0{TODO}*alpha;
    C1_to_C2 = 3.0{TODO}*alpha;
    C2_to_C3 = 2.0{TODO}*alpha;
    C3_to_C4 = alpha;
    CCa0_to_CCa1 = 4.0{TODO}*alpha_prime;
    CCa1_to_CCa2 = 3.0{TODO}*alpha_prime;
    CCa2_to_CCa3 = 2.0{TODO}*alpha_prime;
    CCa3_to_CCa4 = alpha_prime;
    C1_to_C0 = beta;
    C2_to_C1 = 2.0{TODO}*beta;
    C3_to_C2 = 3.0{TODO}*beta;
    C4_to_C3 = 4.0{TODO}*beta;
    CCa1_to_CCa0 = beta_prime;
    CCa2_to_CCa1 = 2.0{TODO}*beta_prime;
    CCa3_to_CCa2 = 3.0{TODO}*beta_prime;
    CCa4_to_CCa3 = 4.0{TODO}*beta_prime;
    gamma = 0.1875{TODO}*CaSS;
    C0_to_CCa0 = gamma;
    C1_to_CCa1 = aL*C0_to_CCa0;
    C2_to_CCa2 = aL*C1_to_CCa1;
    C3_to_CCa3 = aL*C2_to_CCa2;
    C4_to_CCa4 = aL*C3_to_CCa3;
    CCa0_to_C0 = omega;
    CCa1_to_C1 = CCa0_to_C0*inv_bL;
    CCa2_to_C2 = CCa1_to_C1*inv_bL;
    CCa3_to_C3 = CCa2_to_C2*inv_bL;
    CCa4_to_C4 = CCa3_to_C3*inv_bL;
    ode(C0, time) = C1_to_C0*C1+CCa0_to_C0*CCa0-(C0_to_C1+C0_to_CCa0)*C0;
    ode(C1, time) = C0_to_C1*C0+C2_to_C1*C2+CCa1_to_C1*CCa1-(C1_to_C0+C1_to_C2+C1_to_CCa1)*C1;
    ode(C2, time) = C1_to_C2*C1+C3_to_C2*C3+CCa2_to_C2*CCa2-(C2_to_C1+C2_to_C3+C2_to_CCa2)*C2;
    ode(C3, time) = C2_to_C3*C2+C4_to_C3*C4+CCa3_to_C3*CCa3-(C3_to_C2+C3_to_C4+C3_to_CCa3)*C3;
    ode(C4, time) = C3_to_C4*C3+gL*Open+CCa4_to_C4*CCa4-(C4_to_C3+fL+C4_to_CCa4)*C4;
    ode(Open, time) = fL*C4-gL*Open;
    ode(CCa0, time) = CCa1_to_CCa0*CCa1+C0_to_CCa0*C0-(CCa0_to_CCa1+CCa0_to_C0)*CCa0;
    ode(CCa1, time) = CCa0_to_CCa1*CCa0+CCa2_to_CCa1*CCa2+C1_to_CCa1*C1-(CCa1_to_CCa0+CCa1_to_CCa2+CCa1_to_C1)*CCa1;
    ode(CCa2, time) = CCa1_to_CCa2*CCa1+CCa3_to_CCa2*CCa3+C2_to_CCa2*C2-(CCa2_to_CCa1+CCa2_to_CCa3+CCa2_to_C2)*CCa2;
    ode(CCa3, time) = CCa2_to_CCa3*CCa2+CCa4_to_CCa3*CCa4+C3_to_CCa3*C3-(CCa3_to_CCa2+CCa3_to_CCa4+CCa3_to_C3)*CCa3;
    ode(CCa4, time) = CCa3_to_CCa4*CCa3+gprime*OCa+C4_to_CCa4*C4-(CCa4_to_CCa3+fprime+CCa4_to_C4)*CCa4;
    ode(yCa, time) = (1.0{TODO}/(1.0{TODO}+exp((V+55.0{TODO})*(1.0{TODO}/7.5{TODO})))+0.5{TODO}/(1.0{TODO}+exp((21.0{TODO}-V)*(1.0{TODO}/6.0{TODO})))-yCa)/(20.0{TODO}+600.0{TODO}/(1.0{TODO}+exp((V+30.0{TODO})*(1.0{TODO}/9.5{TODO}))));
    ode(OCa, time) = fprime*CCa4-gprime*OCa;
    Vt_CRP2 = kt_2*(CrPi_mito-CrPi_cyto);
    VCK_cyto = kf_2*((CRT_cyto-CrPi_cyto)*ATPi_cyto-CrPi_cyto*(8.0{TODO}-ATPi_cyto)*inv_keq);
    VCK_mito = kf_3*((CRT_mito-CrPi_mito)*ATPi-CrPi_mito*ADP*inv_keq);
    ode(CrPi_mito, time) = VCK_mito-Vt_CRP2;
    ode(CrPi_cyto, time) = Vt_CRP2+VCK_cyto;
    ode(ATPi, time) = (1.0{dimensionless}-clamp_ATPi)*(0.615{TODO}*VANT-(V_AM+0.5{TODO}*Jup+6.371e-5{TODO}*(INaK+IpCa)+VCK_mito));
    ode(ATPi_cyto, time) = (1.0{dimensionless}-clamp_ATPi_cyto)*(-VCK_cyto-VATPase_cyto);
    ode(Cam, time) = fm*(Vuni-VnaCa);
    ode(ADPm, time) = VANT-(VATPase+VSL);
    ode(Dpsi, time) = -((-VHNe-VHFe+Vhu+VANT+Vhleak+two_b*VnaCa+2.0{TODO}*Vuni)*inv_Cmito);
    ode(NADH, time) = -VNO+VIDH+VKGDH+VMDH;
    ode(ISOC, time) = VACO-VIDH;
    ode(AKG, time) = VIDH+VAAT-VKGDH;
    ode(SCoA, time) = VKGDH-VSL;
    ode(Succ, time) = VSL-VSDH;
    ode(FUM, time) = VSDH-VFH;
    ode(MAL, time) = VFH-VMDH;
    ode(Oaa, time) = VMDH-(VCS+VAAT);
    ode(ASP, time) = VAAT-kcnsASP*ASP;
  enddef;

  def comp ENa as
    var z: dimensionless {pub: in};
    var T: K {pub: in};
    var intracellular_concentration: dimensionless {pub: in};
    var extracellular_concentration: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var F: C_per_mmol {pub: in};
    var reversal_potential: dimensionless {pub: out};
    reversal_potential = R*T/(z*F)*ln(extracellular_concentration/intracellular_concentration);
  enddef;

  def comp EK as
    var z: dimensionless {pub: in};
    var T: K {pub: in};
    var intracellular_concentration: dimensionless {pub: in};
    var extracellular_concentration: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var F: C_per_mmol {pub: in};
    var reversal_potential: dimensionless {pub: out};
    reversal_potential = R*T/(z*F)*ln(extracellular_concentration/intracellular_concentration);
  enddef;

  def comp ECa as
    var z: dimensionless {pub: in};
    var T: K {pub: in};
    var intracellular_concentration: dimensionless {pub: in};
    var extracellular_concentration: mM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var F: C_per_mmol {pub: in};
    var reversal_potential: dimensionless {pub: out};
    reversal_potential = R*T/(z*F)*ln(extracellular_concentration/intracellular_concentration);
  enddef;

  def comp EKs as
    var z: dimensionless {pub: in};
    var T: K {pub: in};
    var intracellular_concentration_1: dimensionless {pub: in};
    var extracellular_concentration_1: mM {pub: in};
    var intracellular_concentration_2: dimensionless {pub: in};
    var extracellular_concentration_2: mM {pub: in};
    var multiplier_1: dimensionless {pub: in};
    var multiplier_2: dimensionless {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var F: C_per_mmol {pub: in};
    var reversal_potential: dimensionless {pub: out};
    reversal_potential = R*T/(z*F)*ln((multiplier_1*extracellular_concentration_1+multiplier_2*extracellular_concentration_2)/(multiplier_1*intracellular_concentration_1+multiplier_2*intracellular_concentration_2));
  enddef;
  def map between time and model for
    vars time and time;
  enddef;
  def map between time and stimulus_current for
    vars time and time;
  enddef;
  def map between model and stimulus_current for
    vars Istim and Istim;
  enddef;
  def map between model and model_1 for
    vars time and time;
    vars Istim and Istim;
  enddef;
  def map between parameters and model_1 for
    vars clamp_ATPi and clamp_ATPi;
    vars clamp_ATPi_cyto and clamp_ATPi_cyto;
    vars Vmyo and Vmyo;
    vars VJSR and VJSR;
    vars VNSR and VNSR;
    vars VSS and VSS;
    vars f_xb and f_xb;
    vars gmin_xb and gmin_xb;
    vars SL and SL;
    vars kltrpn_minus and kltrpn_minus;
    vars kltrpn_plus and kltrpn_plus;
    vars Acap and Acap;
    vars C_m and C_m;
    vars Cao and Cao;
    vars Ko and Ko;
    vars Nao and Nao;
    vars PCa and PCa;
    vars ICahalf and ICahalf;
    vars PK and PK;
    vars KmNai and KmNai;
    vars INaKmax and INaKmax;
    vars KmKo and KmKo;
    vars Ki1AD_NaK and Ki1AD_NaK;
    vars eta and eta;
    vars KmCa and KmCa;
    vars KmNa and KmNa;
    vars kNaCa and kNaCa;
    vars ksat and ksat;
    vars KiADP_CaP and KiADP_CaP;
    vars KmnsCa and KmnsCa;
    vars V_AM_scaler and V_AM_scaler;
    vars V_AM_max and V_AM_max;
    vars KmATP_AM and KmATP_AM;
    vars Ki_AM and Ki_AM;
    vars DpH and DpH;
    vars KCS and KCS;
    vars EtCS and EtCS;
    vars AcCoA and AcCoA;
    vars KmAcCoA and KmAcCoA;
    vars KACOeq and KACOeq;
    vars H and H;
    vars kh_1 and kh_1;
    vars kh_2 and kh_2;
    vars kIDH and kIDH;
    vars EtID and EtID;
    vars KADP and KADP;
    vars KaCa and KaCa;
    vars KidhNADH and KidhNADH;
    vars KmKGNAD and KmKGNAD;
    vars KmIDNAD and KmIDNAD;
    vars Mg and Mg;
    vars Kmg and Kmg;
    vars Kca and Kca;
    vars kKGDH and kKGDH;
    vars EtKG and EtKG;
    vars CoA and CoA;
    vars KSLeq and KSLeq;
    vars kSDH and kSDH;
    vars EtSDH and EtSDH;
    vars KmSucc and KmSucc;
    vars KiFUM and KiFUM;
    vars KiOxaa and KiOxaa;
    vars kfFH and kfFH;
    vars KFHeq and KFHeq;
    vars Kh3 and Kh3;
    vars Kh4 and Kh4;
    vars Kh1 and Kh1;
    vars Kh2 and Kh2;
    vars Koff and Koff;
    vars kMDH and kMDH;
    vars EtMD and EtMD;
    vars Kmal and Kmal;
    vars Kioaa and Kioaa;
    vars kfAAT and kfAAT;
    vars GLU and GLU;
    vars kcnsASP and kcnsASP;
    vars KAATeq and KAATeq;
    vars kres and kres;
    vars Dpsio and Dpsio;
    vars g and g;
    vars ra and ra;
    vars rc1 and rc1;
    vars r1 and r1;
    vars rhoREN and rhoREN;
    vars rc2 and rc2;
    vars rb and rb;
    vars kresf and kresf;
    vars FADH2 and FADH2;
    vars FAD and FAD;
    vars r2 and r2;
    vars r3 and r3;
    vars kf1 and kf1;
    vars Pi and Pi;
    vars pa and pa;
    vars pc1 and pc1;
    vars pb and pb;
    vars p1 and p1;
    vars hm and hm;
    vars VmDT and VmDT;
    vars Kfb and Kfb;
    vars Krb and Krb;
    vars tautr and tautr;
    vars tauxfer and tauxfer;
    vars KmATP_SR and KmATP_SR;
    vars Ki_SR and Ki_SR;
    vars Ki_prime_SR and Ki_prime_SR;
    vars LTRPNtot and LTRPNtot;
    vars kTrop_pn and kTrop_pn;
    vars CMDNtot and CMDNtot;
    vars KmCMDN and KmCMDN;
    vars CSQNtot and CSQNtot;
    vars KmCSQN and KmCSQN;
    vars ktrans and ktrans;
    vars kact and kact;
    vars Vmuni and Vmuni;
    vars b and b;
    vars bL and bL;
    vars Cmito and Cmito;
    vars keq and keq;
    vars zeta and zeta;
    vars one and one;
    vars p_KNa and p_KNa;
    vars zK and zK;
    vars zCa and zCa;
    vars zNa and zNa;
    vars T and T;
    vars R and R;
    vars Faraday and Faraday;
    vars LHospitalThreshold and LHospitalThreshold;
    vars G_Na and G_Na;
    vars G_Nab and G_Nab;
    vars G_Kp and G_Kp;
    vars Km1AT_NaK and Km1AT_NaK;
    vars G_Cab and G_Cab;
    vars IpCamax and IpCamax;
    vars KmpCa and KmpCa;
    vars Km1ATP_CaP and Km1ATP_CaP;
    vars Km2ATP_CaP and Km2ATP_CaP;
    vars PnsNa and PnsNa;
    vars PnsK and PnsK;
    vars Cm and Cm;
    vars CPN and CPN;
    vars KmOaa and KmOaa;
    vars kfACO and kfACO;
    vars CIK and CIK;
    vars Kmiso and Kmiso;
    vars nID and nID;
    vars KmKG and KmKG;
    vars nKG and nKG;
    vars kfSL and kfSL;
    vars KmmNAD and KmmNAD;
    vars rhoREF and rhoREF;
    vars rhoF1 and rhoF1;
    vars p2 and p2;
    vars p3 and p3;
    vars pc2 and pc2;
    vars gh and gh;
    vars Nfb and Nfb;
    vars Nrb and Nrb;
    vars KSR and KSR;
    vars vmaxf and vmaxf;
    vars vmaxr and vmaxr;
    vars v1 and v1;
    vars khtrpn_plus and khtrpn_plus;
    vars HTRPNtot and HTRPNtot;
    vars khtrpn_minus and khtrpn_minus;
    vars L and L;
    vars na and na;
    vars VmNC and VmNC;
    vars Kna and Kna;
    vars n and n;
    vars Knca and Knca;
    vars kaplus and kaplus;
    vars ncoop and ncoop;
    vars kaminus and kaminus;
    vars kbplus and kbplus;
    vars mcoop and mcoop;
    vars kbminus and kbminus;
    vars kcplus and kcplus;
    vars kcminus and kcminus;
    vars aL and aL;
    vars omega and omega;
    vars gL and gL;
    vars fL and fL;
    vars gprime and gprime;
    vars fprime and fprime;
    vars kt_2 and kt_2;
    vars kf_2 and kf_2;
    vars CRT_cyto and CRT_cyto;
    vars kf_3 and kf_3;
    vars CRT_mito and CRT_mito;
    vars VATPase_cyto and VATPase_cyto;
    vars fm and fm;
  enddef;
  def map between initial_values and model_1 for
    vars ATPi_initial and ATPi_initial;
    vars V_initial and V_initial;
    vars C1_RyR_initial and C1_RyR_initial;
    vars C2_RyR_initial and C2_RyR_initial;
    vars O2_RyR_initial and O2_RyR_initial;
    vars mNa_initial and mNa_initial;
    vars hNa_initial and hNa_initial;
    vars jNa_initial and jNa_initial;
    vars xKs_initial and xKs_initial;
    vars Open_initial and Open_initial;
    vars OCa_initial and OCa_initial;
    vars yCa_initial and yCa_initial;
    vars Ki_initial and Ki_initial;
    vars Nai_initial and Nai_initial;
    vars Cai_initial and Cai_initial;
    vars ADPm_initial and ADPm_initial;
    vars Dpsi_initial and Dpsi_initial;
    vars NADH_initial and NADH_initial;
    vars Oaa_initial and Oaa_initial;
    vars AKG_initial and AKG_initial;
    vars SCoA_initial and SCoA_initial;
    vars Succ_initial and Succ_initial;
    vars FUM_initial and FUM_initial;
    vars MAL_initial and MAL_initial;
    vars ISOC_initial and ISOC_initial;
    vars Cam_initial and Cam_initial;
    vars CaNSR_initial and CaNSR_initial;
    vars CaJSR_initial and CaJSR_initial;
    vars CaSS_initial and CaSS_initial;
    vars N1_initial and N1_initial;
    vars P0_initial and P0_initial;
    vars P1_initial and P1_initial;
    vars P2_initial and P2_initial;
    vars P3_initial and P3_initial;
    vars LTRPNCa_initial and LTRPNCa_initial;
    vars HTRPNCa_initial and HTRPNCa_initial;
    vars C1_initial and C1_initial;
    vars CCa0_initial and CCa0_initial;
    vars C0_initial and C0_initial;
    vars C2_initial and C2_initial;
    vars CCa1_initial and CCa1_initial;
    vars C3_initial and C3_initial;
    vars CCa2_initial and CCa2_initial;
    vars C4_initial and C4_initial;
    vars CCa3_initial and CCa3_initial;
    vars CCa4_initial and CCa4_initial;
    vars CrPi_mito_initial and CrPi_mito_initial;
    vars CrPi_cyto_initial and CrPi_cyto_initial;
    vars ATPi_cyto_initial and ATPi_cyto_initial;
    vars ASP_initial and ASP_initial;
    vars N0_initial and N0_initial;
  enddef;
  def map between model_2 and ENa for
    vars E_Na and reversal_potential;
    vars Nai and intracellular_concentration;
  enddef;
  def map between ENa and model_1 for
    vars z and zNa;
    vars T and T;
    vars R and R;
    vars F and Faraday;
    vars extracellular_concentration and Nao;
  enddef;
  def map between model_2 and EK for
    vars E_K and reversal_potential;
    vars Ki and intracellular_concentration;
  enddef;
  def map between EK and model_1 for
    vars z and zK;
    vars T and T;
    vars R and R;
    vars F and Faraday;
    vars extracellular_concentration and Ko;
  enddef;
  def map between model_2 and ECa for
    vars E_Ca and reversal_potential;
    vars Cai and intracellular_concentration;
  enddef;
  def map between ECa and model_1 for
    vars z and zCa;
    vars T and T;
    vars R and R;
    vars F and Faraday;
    vars extracellular_concentration and Cao;
  enddef;
  def map between model_2 and EKs for
    vars E_Ks and reversal_potential;
    vars Ki and intracellular_concentration_1;
    vars Nai and intracellular_concentration_2;
  enddef;
  def map between EKs and model_1 for
    vars z and zK;
    vars T and T;
    vars R and R;
    vars F and Faraday;
    vars multiplier_1 and one;
    vars multiplier_2 and p_KNa;
    vars extracellular_concentration_1 and Ko;
    vars extracellular_concentration_2 and Nao;
  enddef;
  def map between model_1 and computed_constants for
    vars Vmyo and Vmyo;
    vars VJSR and VJSR;
    vars VNSR and VNSR;
    vars VSS and VSS;
    vars f_xb and f_xb;
    vars gmin_xb and gmin_xb;
    vars SL and SL;
    vars kltrpn_minus and kltrpn_minus;
    vars kltrpn_plus and kltrpn_plus;
    vars Faraday and Faraday;
    vars R and R;
    vars T and T;
    vars Acap and Acap;
    vars C_m and C_m;
    vars Cao and Cao;
    vars Ko and Ko;
    vars Nao and Nao;
    vars PCa and PCa;
    vars ICahalf and ICahalf;
    vars PK and PK;
    vars KmNai and KmNai;
    vars INaKmax and INaKmax;
    vars KmKo and KmKo;
    vars Ki1AD_NaK and Ki1AD_NaK;
    vars eta and eta;
    vars KmCa and KmCa;
    vars KmNa and KmNa;
    vars kNaCa and kNaCa;
    vars ksat and ksat;
    vars KiADP_CaP and KiADP_CaP;
    vars KmnsCa and KmnsCa;
    vars V_AM_scaler and V_AM_scaler;
    vars V_AM_max and V_AM_max;
    vars KmATP_AM and KmATP_AM;
    vars Ki_AM and Ki_AM;
    vars DpH and DpH;
    vars KCS and KCS;
    vars EtCS and EtCS;
    vars AcCoA and AcCoA;
    vars KmAcCoA and KmAcCoA;
    vars KACOeq and KACOeq;
    vars H and H;
    vars kh_1 and kh_1;
    vars kh_2 and kh_2;
    vars kIDH and kIDH;
    vars EtID and EtID;
    vars KADP and KADP;
    vars KaCa and KaCa;
    vars KidhNADH and KidhNADH;
    vars KmKGNAD and KmKGNAD;
    vars KmIDNAD and KmIDNAD;
    vars Mg and Mg;
    vars Kmg and Kmg;
    vars Kca and Kca;
    vars kKGDH and kKGDH;
    vars EtKG and EtKG;
    vars CoA and CoA;
    vars KSLeq and KSLeq;
    vars kSDH and kSDH;
    vars EtSDH and EtSDH;
    vars KmSucc and KmSucc;
    vars KiFUM and KiFUM;
    vars KiOxaa and KiOxaa;
    vars kfFH and kfFH;
    vars KFHeq and KFHeq;
    vars Kh3 and Kh3;
    vars Kh4 and Kh4;
    vars Kh1 and Kh1;
    vars Kh2 and Kh2;
    vars Koff and Koff;
    vars kMDH and kMDH;
    vars EtMD and EtMD;
    vars Kmal and Kmal;
    vars Kioaa and Kioaa;
    vars kfAAT and kfAAT;
    vars GLU and GLU;
    vars kcnsASP and kcnsASP;
    vars KAATeq and KAATeq;
    vars kres and kres;
    vars Dpsio and Dpsio;
    vars g and g;
    vars ra and ra;
    vars rc1 and rc1;
    vars r1 and r1;
    vars rhoREN and rhoREN;
    vars rc2 and rc2;
    vars rb and rb;
    vars kresf and kresf;
    vars FADH2 and FADH2;
    vars FAD and FAD;
    vars r2 and r2;
    vars r3 and r3;
    vars kf1 and kf1;
    vars Pi and Pi;
    vars pa and pa;
    vars pc1 and pc1;
    vars pb and pb;
    vars p1 and p1;
    vars hm and hm;
    vars VmDT and VmDT;
    vars Kfb and Kfb;
    vars Krb and Krb;
    vars tautr and tautr;
    vars tauxfer and tauxfer;
    vars KmATP_SR and KmATP_SR;
    vars Ki_SR and Ki_SR;
    vars Ki_prime_SR and Ki_prime_SR;
    vars LTRPNtot and LTRPNtot;
    vars kTrop_pn and kTrop_pn;
    vars CMDNtot and CMDNtot;
    vars KmCMDN and KmCMDN;
    vars CSQNtot and CSQNtot;
    vars KmCSQN and KmCSQN;
    vars ktrans and ktrans;
    vars kact and kact;
    vars Vmuni and Vmuni;
    vars b and b;
    vars bL and bL;
    vars Cmito and Cmito;
    vars keq and keq;
    vars zeta and zeta;
  enddef;
  def map between model_1 and model_2 for
    vars clamp_ATPi and clamp_ATPi;
    vars clamp_ATPi_cyto and clamp_ATPi_cyto;
    vars time and time;
    vars Istim and Istim;
    vars LHospitalThreshold and LHospitalThreshold;
    vars G_Na and G_Na;
    vars G_Nab and G_Nab;
    vars G_Kp and G_Kp;
    vars Ko and Ko;
    vars Km1AT_NaK and Km1AT_NaK;
    vars eta and eta;
    vars G_Cab and G_Cab;
    vars IpCamax and IpCamax;
    vars KmpCa and KmpCa;
    vars Km1ATP_CaP and Km1ATP_CaP;
    vars Km2ATP_CaP and Km2ATP_CaP;
    vars PnsNa and PnsNa;
    vars Nao and Nao;
    vars PnsK and PnsK;
    vars KmATP_AM and KmATP_AM;
    vars Cm and Cm;
    vars CPN and CPN;
    vars KmIDNAD and KmIDNAD;
    vars KmOaa and KmOaa;
    vars kfACO and kfACO;
    vars CIK and CIK;
    vars Kmiso and Kmiso;
    vars nID and nID;
    vars KmKG and KmKG;
    vars nKG and nKG;
    vars kfSL and kfSL;
    vars KmSucc and KmSucc;
    vars kfFH and kfFH;
    vars Kmal and Kmal;
    vars KmmNAD and KmmNAD;
    vars r2 and r2;
    vars r3 and r3;
    vars rhoREF and rhoREF;
    vars rhoF1 and rhoF1;
    vars p2 and p2;
    vars p3 and p3;
    vars pc2 and pc2;
    vars pa and pa;
    vars gh and gh;
    vars Nfb and Nfb;
    vars Nrb and Nrb;
    vars KSR and KSR;
    vars vmaxf and vmaxf;
    vars vmaxr and vmaxr;
    vars KmATP_SR and KmATP_SR;
    vars v1 and v1;
    vars kTrop_pn and kTrop_pn;
    vars kltrpn_plus and kltrpn_plus;
    vars LTRPNtot and LTRPNtot;
    vars kltrpn_minus and kltrpn_minus;
    vars khtrpn_plus and khtrpn_plus;
    vars HTRPNtot and HTRPNtot;
    vars khtrpn_minus and khtrpn_minus;
    vars KmCMDN and KmCMDN;
    vars KmCSQN and KmCSQN;
    vars L and L;
    vars na and na;
    vars VmNC and VmNC;
    vars Kna and Kna;
    vars n and n;
    vars Knca and Knca;
    vars kaplus and kaplus;
    vars ncoop and ncoop;
    vars kaminus and kaminus;
    vars kbplus and kbplus;
    vars mcoop and mcoop;
    vars kbminus and kbminus;
    vars kcplus and kcplus;
    vars kcminus and kcminus;
    vars aL and aL;
    vars omega and omega;
    vars gL and gL;
    vars fL and fL;
    vars gprime and gprime;
    vars fprime and fprime;
    vars kt_2 and kt_2;
    vars kf_2 and kf_2;
    vars CRT_cyto and CRT_cyto;
    vars kf_3 and kf_3;
    vars CRT_mito and CRT_mito;
    vars VATPase_cyto and VATPase_cyto;
    vars fm and fm;
    vars kcnsASP and kcnsASP;
    vars KmNai and KmNai;
    vars ATPi_initial and ATPi_initial;
    vars V_initial and V_initial;
    vars C1_RyR_initial and C1_RyR_initial;
    vars C2_RyR_initial and C2_RyR_initial;
    vars O2_RyR_initial and O2_RyR_initial;
    vars mNa_initial and mNa_initial;
    vars hNa_initial and hNa_initial;
    vars jNa_initial and jNa_initial;
    vars xKs_initial and xKs_initial;
    vars Open_initial and Open_initial;
    vars OCa_initial and OCa_initial;
    vars yCa_initial and yCa_initial;
    vars Ki_initial and Ki_initial;
    vars Nai_initial and Nai_initial;
    vars Cai_initial and Cai_initial;
    vars ADPm_initial and ADPm_initial;
    vars Dpsi_initial and Dpsi_initial;
    vars NADH_initial and NADH_initial;
    vars Oaa_initial and Oaa_initial;
    vars AKG_initial and AKG_initial;
    vars SCoA_initial and SCoA_initial;
    vars Succ_initial and Succ_initial;
    vars FUM_initial and FUM_initial;
    vars MAL_initial and MAL_initial;
    vars ISOC_initial and ISOC_initial;
    vars Cam_initial and Cam_initial;
    vars CaNSR_initial and CaNSR_initial;
    vars CaJSR_initial and CaJSR_initial;
    vars CaSS_initial and CaSS_initial;
    vars N1_initial and N1_initial;
    vars P0_initial and P0_initial;
    vars P1_initial and P1_initial;
    vars P2_initial and P2_initial;
    vars P3_initial and P3_initial;
    vars LTRPNCa_initial and LTRPNCa_initial;
    vars HTRPNCa_initial and HTRPNCa_initial;
    vars C1_initial and C1_initial;
    vars CCa0_initial and CCa0_initial;
    vars C0_initial and C0_initial;
    vars C2_initial and C2_initial;
    vars CCa1_initial and CCa1_initial;
    vars C3_initial and C3_initial;
    vars CCa2_initial and CCa2_initial;
    vars C4_initial and C4_initial;
    vars CCa3_initial and CCa3_initial;
    vars CCa4_initial and CCa4_initial;
    vars CrPi_mito_initial and CrPi_mito_initial;
    vars CrPi_cyto_initial and CrPi_cyto_initial;
    vars ATPi_cyto_initial and ATPi_cyto_initial;
    vars ASP_initial and ASP_initial;
    vars N0_initial and N0_initial;
  enddef;
  def map between computed_constants and model_2 for
    vars F_over_RT and F_over_RT;
    vars FaradayE3 and FaradayE3;
    vars G_Ks and G_Ks;
    vars G_K1 and G_K1;
    vars inv_5p98 and inv_5p98;
    vars Pca_4En3 and Pca_4En3;
    vars Cao_341 and Cao_341;
    vars PKFe3 and PKFe3;
    vars inv_ICahalf and inv_ICahalf;
    vars INaKmax_Ko_Ko_KmKo and INaKmax_Ko_Ko_KmKo;
    vars sigma and sigma;
    vars inv_Ki1AD_NaK and inv_Ki1AD_NaK;
    vars Nao_p3 and Nao_p3;
    vars KmCa_Cao and KmCa_Cao;
    vars KmCa_Cao_ksat and KmCa_Cao_ksat;
    vars inv_KiADP_CaP and inv_KiADP_CaP;
    vars KmnsCa_p3 and KmnsCa_p3;
    vars V_AM_scaler_max_1_f_01_12_23 and V_AM_scaler_max_1_f_01_12_23;
    vars f_01 and f_01;
    vars f_12 and f_12;
    vars f_23 and f_23;
    vars KmATP_AM_Ki_AM and KmATP_AM_Ki_AM;
    vars DmuH_Constant and DmuH_Constant;
    vars FRT_6_g and FRT_6_g;
    vars FRT2 and FRT2;
    vars VCS_C1 and VCS_C1;
    vars one_inv_KACOeq and one_inv_KACOeq;
    vars inv_KADP and inv_KADP;
    vars inv_KaCa and inv_KaCa;
    vars inv_KidhNADH and inv_KidhNADH;
    vars kIDH_EtID and kIDH_EtID;
    vars VIDH_Constant and VIDH_Constant;
    vars Mg_Kmg_1 and Mg_Kmg_1;
    vars Mg_Kmg_1_Kca and Mg_Kmg_1_Kca;
    vars kKGDH_EtKG and kKGDH_EtKG;
    vars KmKGNAD_KmIDNAD and KmKGNAD_KmIDNAD;
    vars CoA_KSLeq and CoA_KSLeq;
    vars kSDH_EtSDH and kSDH_EtSDH;
    vars KmSucc_KiFUM and KmSucc_KiFUM;
    vars inv_KiOxaa and inv_KiOxaa;
    vars kfFH_KFHeq and kfFH_KFHeq;
    vars kMDH_Fh_EtMD and kMDH_Fh_EtMD;
    vars Kmal_Kioaa and Kmal_Kioaa;
    vars VAAT_Constant and VAAT_Constant;
    vars kcnsASP_KAATeq_kfAAT and kcnsASP_KAATeq_kfAAT;
    vars kres_sq_KmIDNAD and kres_sq_KmIDNAD;
    vars exp_6_FRT_Dpsio and exp_6_FRT_Dpsio;
    vars r1_exp_6_FRT_Dpsio and r1_exp_6_FRT_Dpsio;
    vars rhoREN_ra_rc1_exp_6_FRT_Dpsio and rhoREN_ra_rc1_exp_6_FRT_Dpsio;
    vars rhoREN_rc2 and rhoREN_rc2;
    vars rhoREN_ra and rhoREN_ra;
    vars rhoRen_6_ra and rhoRen_6_ra;
    vars rhoRen_6_ra_rb and rhoRen_6_ra_rb;
    vars VFO_VHFe_C1 and VFO_VHFe_C1;
    vars r2_r3_exp_AREF_FRT and r2_r3_exp_AREF_FRT;
    vars ra_exp_AREF_FRT and ra_exp_AREF_FRT;
    vars ra_rb and ra_rb;
    vars FRT_3 and FRT_3;
    vars kf1_Pi and kf1_Pi;
    vars exp_3_FRT_Dpsio and exp_3_FRT_Dpsio;
    vars p1_exp_3_FRT_Dpsio and p1_exp_3_FRT_Dpsio;
    vars VATPase_C1 and VATPase_C1;
    vars pa_300 and pa_300;
    vars pa_pb_3 and pa_pb_3;
    vars VmDT_75 and VmDT_75;
    vars VmDT_20 and VmDT_20;
    vars hm_F_over_RT and hm_F_over_RT;
    vars inv_Kfb and inv_Kfb;
    vars inv_Krb and inv_Krb;
    vars KmATP_SR_Ki_SR and KmATP_SR_Ki_SR;
    vars inv_Ki_prime_SR and inv_Ki_prime_SR;
    vars inv_tautr and inv_tautr;
    vars inv_tauxfer and inv_tauxfer;
    vars alpha_SL_fnormmax2 and alpha_SL_fnormmax2;
    vars alpha_SL_fnormmax and alpha_SL_fnormmax;
    vars zeta_alpha_SL_fnormmax and zeta_alpha_SL_fnormmax;
    vars inv_LTRPNtot_Ktrop_half and inv_LTRPNtot_Ktrop_half;
    vars Ntrop and Ntrop;
    vars kTrop_pn_f_01 and kTrop_pn_f_01;
    vars g_01_mod and g_01_mod;
    vars kTrop_pn_f_12_g_01_mod and kTrop_pn_f_12_g_01_mod;
    vars g_12_mod and g_12_mod;
    vars f_23_g_12_mod and f_23_g_12_mod;
    vars g_23_mod and g_23_mod;
    vars g_01_off_mod and g_01_off_mod;
    vars CMDNtot_KmCMDN and CMDNtot_KmCMDN;
    vars CSQNtot_KmCSQN and CSQNtot_KmCSQN;
    vars inv_ktrans and inv_ktrans;
    vars Vmuni_ktrans and Vmuni_ktrans;
    vars inv_kact and inv_kact;
    vars b_05 and b_05;
    vars Acap_Vmyo_F and Acap_Vmyo_F;
    vars VJSR_VSS and VJSR_VSS;
    vars Vmyo_VSS and Vmyo_VSS;
    vars Acap_VSS_F and Acap_VSS_F;
    vars Vmyo_VNSR and Vmyo_VNSR;
    vars VJSR_VNSR and VJSR_VNSR;
    vars inv_C_m and inv_C_m;
    vars inv_bL and inv_bL;
    vars inv_keq and inv_keq;
    vars two_b and two_b;
    vars inv_Cmito and inv_Cmito;
  enddef;

  def group as encapsulation for
    comp model incl
      comp parameters;
      comp initial_values;
      comp model_1;
    endcomp;
  enddef;

  def group as encapsulation for
    comp model_1 incl
      comp computed_constants;
      comp model_2;
      comp ENa;
      comp EK;
      comp ECa;
      comp EKs;
    endcomp;
  enddef;
enddef;
