<?xml version='1.0' encoding='utf-8'?>

<model
    name="smith_2007_pre_I"
    cmeta:id="smith_2007_pre_I"
    xmlns="http://www.cellml.org/cellml/1.1#"
    xmlns:cellml="http://www.cellml.org/cellml/1.1#"
    xmlns:cmeta="http://www.cellml.org/metadata/1.0#"
    xmlns:xlink="http://www.w3.org/1999/xlink"
    xmlns:dc="http://purl.org/dc/elements/1.1/"
    xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" 
    xmlns:bqs="http://www.cellml.org/bqs/1.0#" 
    xmlns:dcterms="http://purl.org/dc/terms/"
    xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">

	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Spatial and functional architecture of the mammalian brain stem respiratory network: a hierarchy of three oscillatory mechanisms</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This CellML model represents a preinspiratory (pre-I) neuron.  It forms part of the brain stem respiratory network computational model described by Smith et al. 2007, and modified by Dr Carlo Laing.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
Abstract: Mammalian central pattern generators (CPGs) producing rhythmic movements exhibit extremely robust and flexible behavior. Network architectures that enable these features are not well understood. Here we studied organization of the brain stem respiratory CPG. By sequential rostral to caudal transections through the pontine-medullary respiratory network within an in situ perfused rat brain stem-spinal cord preparation, we showed that network dynamics reorganized and new rhythmogenic mechanisms emerged. The normal three-phase respiratory rhythm transformed to a two-phase and then to a one-phase rhythm as the network was reduced. Expression of the three-phase rhythm required the presence of the pons, generation of the two-phase rhythm depended on the integrity of Botzinger and pre-Botzinger complexes and interactions between them, and the one-phase rhythm was generated within the pre-Botzinger complex. Transformation from the three-phase to a two-phase pattern also occurred in intact preparations when chloride-mediated synaptic inhibition was reduced. In contrast to the three-phase and two-phase rhythms, the one-phase rhythm was abolished by blockade of persistent sodium current (I(NaP)). A model of the respiratory network was developed to reproduce and explain these observations. The model incorporated interacting populations of respiratory neurons within spatially organized brain stem compartments. Our simulations reproduced the respiratory patterns recorded from intact and sequentially reduced preparations. Our results suggest that the three-phase and two-phase rhythms involve inhibitory network interactions, whereas the one-phase rhythm depends on I(NaP). We conclude that the respiratory network has rhythmogenic capabilities at multiple levels of network organization, allowing expression of motor patterns specific for various physiological and pathophysiological respiratory behaviors.</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="smith_2007.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic of the computational model of the brain stem respiratory network. Model includes interacting neuronal populations within major brain stem respiratory compartments (Pons, BotC, pre-BotC, and rVRG). Spheres represent neuronal populations (excitatory, red; inhibitory, blue; motoneuronal, brown); green triangles represent sources of tonic excitatory drives (in pons, RTN/BotC, and pre-BotC compartments) to different neural populations. Excitatory and inhibitory synaptic connections are indicated by arrows and small circles, respectively. Simulated 
'transections' (dashed lines) mimic those performed in situ.</caption>
</informalfigure>

				<para>
The original paper reference is cited below:
</para>
				<para>
Spatial and functional architecture of the mammalian brain stem respiratory network: a hierarchy of three oscillatory mechanisms, Smith JC, Abdala AP, Koizumi H, Rybak IA, Paton JF, 2007, <emphasis>Journal of Neurophysiology</emphasis>, 98, 3370-3387. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/17913982">PubMed ID: 17913982.</ulink>
				</para>
			
			</sect1>
		</article>
	</documentation>   
	
	
   <units name="millisecond">
      <unit units="second" prefix="milli"/>
   </units>
   <units name="millivolt">
      <unit units="volt" prefix="milli"/>
   </units>
   <units name="nanoA">
      <unit units="ampere" prefix="nano"/>
   </units>
   <units name="nanoS">
      <unit units="siemens" prefix="nano"/>
   </units>
   <units name="nanoF">
      <unit units="farad" prefix="nano"/>
   </units>
   <units name="first_order_rate_constant">
      <unit units="millisecond" exponent="-1"/>
   </units>
   <units name="per_millivolt_millisecond">
      <unit units="millivolt" exponent="-1"/>
	  <unit units="millisecond" exponent="-1"/>
   </units>
   
   <cmeta:comment rdf:parseType="Resource">
        <rdf:value>
          In order to facilitate the import of this cell model by the synaptic coupling model the current model is encapsulated in a top component called "pre_I".
        </rdf:value>
        <dc:creator rdf:parseType="Resource">
          <vCard:FN>Catherine Lloyd</vCard:FN>
        </dc:creator>
      </cmeta:comment>

  <component name="pre_I" cmeta:id="pre_I">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/0P/PP-rdf-syntax-ns#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/">
      <rdf:Description rdf:about="#pre_I">
        <dc:title>pre_I</dc:title>
        <dcterms:alternative>top component which encapsulates the entire pre-I neuron model</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>
    <variable name="s_e" public_interface="out" private_interface="in" units="dimensionless" />
    
	<variable name="S1" public_interface="in" private_interface="out" units="dimensionless" />
	<variable name="S3" public_interface="in" private_interface="out" units="dimensionless" />
    <variable name="S4" public_interface="in" private_interface="out" units="dimensionless" />
	<variable name="time" public_interface="in" private_interface="out" units="millisecond" /> 
  </component>
  
   <connection>
      <map_components component_2="pre_I" component_1="s_e"/>
      <map_variables variable_2="s_e" variable_1="s_e"/>
	  <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="pre_I" component_1="V"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="pre_I" component_1="i_Na"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="pre_I" component_1="i_NaP"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="pre_I" component_1="i_K"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="pre_I" component_1="model_parameters"/>
      <map_variables variable_2="S1" variable_1="S1"/>
	  <map_variables variable_2="S3" variable_1="S3"/>
	  <map_variables variable_2="S4" variable_1="S4"/>
   </connection>
     
   
   <component name="V">
      <variable units="millivolt" public_interface="out" name="V" initial_value="1.00000"/>
      
	  <variable units="nanoF" public_interface="in" name="C"/>
	  <variable units="nanoA" public_interface="in" name="i_Na"/>
      <variable units="nanoA" public_interface="in" name="i_NaP"/>
      <variable units="nanoA" public_interface="in" name="i_K"/>
	  <variable units="nanoA" public_interface="in" name="i_L"/>
      <variable units="nanoA" public_interface="in" name="i_synE"/>
      <variable units="nanoA" public_interface="in" name="i_synI"/>
      <variable units="millisecond" public_interface="in" name="time"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>i_Na</ci>
                     <ci>i_NaP</ci>
                     <ci>i_K</ci>
                     <ci>i_L</ci>
                     <ci>i_synE</ci>
				 	 <ci>i_synI</ci>
                  </apply>
               </apply>
               <ci>C</ci>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_Na">
      <variable units="nanoA" public_interface="out" name="i_Na"/>
      
	  <variable units="nanoS"  public_interface="in" name="g_Na"/>
      <variable units="millivolt" public_interface="in" name="E_Na"/>
      
	  <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      
	  <variable units="dimensionless" private_interface="in" name="m"/>
      <variable units="dimensionless" private_interface="in" name="h"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <ci>g_Na</ci>
               <apply>
                  <power/>
				  <ci>m</ci>
				  <cn cellml:units="dimensionless">3</cn>
               </apply>
               <ci>h</ci>
               <apply>
                  <divide/>
                  <cn cellml:units="volt">1</cn>
                  <cn cellml:units="millivolt">1000</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_Na_m_gate">
      <variable units="dimensionless" public_interface="out" name="m" initial_value="1.00000"/>
     
	  <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
			<apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <power/>
                     <apply>
                        <plus/>
						<cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <minus/>
						         <apply>
                                    <plus/>
                                    <ci>V</ci>
                                    <cn cellml:units="millivolt">43.8</cn>
                                 </apply>
                              </apply>
						      <cn cellml:units="millivolt">6</cn>
						   </apply>
						</apply>
                     </apply>
					 <cn cellml:units="dimensionless">-1</cn>
                  </apply>
				  <ci>m</ci>
               </apply>
			   <apply>
                  <divide/>
				  <cn cellml:units="millisecond">0.252</cn>
                  <apply>
                     <cosh/>
					 <apply>
                        <divide/>
						<apply>
                           <plus/>
						   <ci>V</ci>
                           <cn cellml:units="millivolt">43.8</cn>
                        </apply>
                        <cn cellml:units="millivolt">14</cn>
				     </apply>
				  </apply>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_Na_h_gate">
      <variable units="dimensionless" public_interface="out" name="h" initial_value="1.00000"/>
     
	  <variable units="millivolt" public_interface="in" name="V"/>
	  <variable units="millisecond" public_interface="in" name="time"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <power/>
                     <apply>
                        <plus/>
						<cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="millivolt">67.5</cn>
                              </apply>
						      <cn cellml:units="millivolt">10.8</cn>
						   </apply>
						</apply>
                     </apply>
					 <cn cellml:units="dimensionless">-1</cn>
                  </apply>
				  <ci>h</ci>
               </apply>
			   <apply>
                  <divide/>
				  <cn cellml:units="millisecond">8.456</cn>
                  <apply>
                     <cosh/>
					 <apply>
                        <divide/>
						<apply>
                           <plus/>
						   <ci>V</ci>
                           <cn cellml:units="millivolt">67.5</cn>
                        </apply>
                        <cn cellml:units="millivolt">12.8</cn>
				     </apply>
				  </apply>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_NaP">
      <variable units="nanoA" public_interface="out" name="i_NaP"/>
      
	  <variable units="nanoS"  public_interface="in" name="g_NaP"/>
      <variable units="millivolt" public_interface="in" name="E_Na"/>
      
	  <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      
	  <variable units="dimensionless" private_interface="in" name="m"/>
      <variable units="dimensionless" private_interface="in" name="h"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_NaP</ci>
            <apply>
               <times/>
               <ci>g_NaP</ci>
               <ci>m</ci>
               <ci>h</ci>
               <apply>
                  <divide/>
                  <cn cellml:units="volt">1</cn>
                  <cn cellml:units="millivolt">1000</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_NaP_m_gate">
      <variable units="dimensionless" public_interface="out" name="m" initial_value="1.00000"/>
     
	  <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <power/>
                     <apply>
                        <plus/>
						<cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <minus/>
						         <apply>
                                    <plus/>
                                    <ci>V</ci>
                                    <cn cellml:units="millivolt">47.1</cn>
                                 </apply>
                              </apply>
						      <cn cellml:units="millivolt">3.1</cn>
						   </apply>
						</apply>
                     </apply>
					 <cn cellml:units="dimensionless">-1</cn>
                  </apply>
				  <ci>m</ci>
               </apply>
			   <apply>
                  <divide/>
				  <cn cellml:units="millisecond">1.0</cn>
                  <apply>
                     <cosh/>
					 <apply>
                        <divide/>
						<apply>
                           <plus/>
						   <ci>V</ci>
                           <cn cellml:units="millivolt">47.1</cn>
                        </apply>
                        <cn cellml:units="millivolt">6.2</cn>
				     </apply>
				  </apply>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_NaP_h_gate">
      <variable units="dimensionless" public_interface="out" name="h" initial_value="1.00000"/>
      
	  <variable units="millivolt" public_interface="in" name="V"/>
      <variable units="millisecond" public_interface="in" name="time"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <power/>
                     <apply>
                        <plus/>
						<cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="millivolt">60.0</cn>
                              </apply>
						      <cn cellml:units="millivolt">9.0</cn>
						   </apply>
						</apply>
                     </apply>
					 <cn cellml:units="dimensionless">-1</cn>
                  </apply>
				  <ci>h</ci>
               </apply>
			   <apply>
                  <divide/>
				  <cn cellml:units="millisecond">5000.0</cn>
                  <apply>
                     <cosh/>
					 <apply>
                        <divide/>
						<apply>
                           <plus/>
						   <ci>V</ci>
                           <cn cellml:units="millivolt">60.0</cn>
                        </apply>
                        <cn cellml:units="millivolt">9.0</cn>
				     </apply>
				  </apply>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_K">
      <variable units="nanoA" public_interface="out" name="i_K"/>
      
	  <variable units="nanoS" public_interface="in" name="g_K"/>
      <variable units="millivolt" public_interface="in" name="E_K"/>
	  
	  <variable units="millisecond" public_interface="in" private_interface="out" name="time"/>
      <variable units="millivolt" public_interface="in" private_interface="out" name="V"/>
      
	  <variable units="dimensionless" private_interface="in" name="m"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K</ci>
            <apply>
               <times/>
               <ci>g_K</ci>
               <apply>
                  <power/>
                  <ci>m</ci>
                  <cn cellml:units="dimensionless">4</cn>
               </apply>
               <apply>
                  <divide/>
                  <cn cellml:units="volt">1</cn>
                  <cn cellml:units="millivolt">1000</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_K</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_K_m_gate">
      <variable units="dimensionless" public_interface="out" name="m" initial_value="1.00000"/>
      
	  <variable units="first_order_rate_constant" name="a"/>
      <variable units="first_order_rate_constant" name="b"/>
	  
	  <variable units="millisecond" public_interface="in" name="time"/>
	  <variable units="millivolt" public_interface="in" name="V"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <minus/>
               <ci>a</ci>
               <apply>
                  <times/>
				  <apply>
                     <plus/>
					 <ci>a</ci>
					 <ci>b</ci>
                  </apply>
				  <ci>m</ci>
               </apply>
            </apply>
         </apply>
		 
		 <apply>
            <eq/>
            <ci>a</ci>
            <apply>
               <divide/>
			   <apply>
                  <times/>
                  <cn cellml:units="per_millivolt_millisecond">0.001</cn>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn cellml:units="millivolt">44.0</cn>
                  </apply>
			   </apply>
			   <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
				  <apply>
                     <exp/>
                     <apply>
                        <divide/>
						<apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">44.0</cn>
                           </apply>
						</apply>
						<cn cellml:units="millivolt">5.0</cn>
				     </apply>
				  </apply>
			   </apply>
            </apply>
         </apply>
		 
		 <apply>
            <eq/>
            <ci>b</ci>
            <apply>
               <times/>
               <cn cellml:units="first_order_rate_constant">0.17</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
				     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">49.0</cn>
                        </apply>
				     </apply>
					 <cn cellml:units="millivolt">40.0</cn>
				  </apply>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_L">
      <variable units="nanoA" public_interface="out" name="i_L"/>
      
	  <variable units="nanoS" public_interface="in" name="g_L"/>
      <variable units="millivolt" public_interface="in" name="E_L"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_L</ci>
            <apply>
               <times/>
               <ci>g_L</ci>
               <apply>
                  <divide/>
                  <cn cellml:units="volt">1</cn>
                  <cn cellml:units="millivolt">1000</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_L</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
  
   <component name="i_synE">
      <variable units="nanoA" public_interface="out" name="i_synE"/>
      
	  <variable units="nanoS" public_interface="in" name="g_synE"/>
      <variable units="millivolt" public_interface="in" name="E_synE"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_synE</ci>
            <apply>
               <times/>
               <ci>g_synE</ci>
               <apply>
                  <divide/>
                  <cn cellml:units="volt">1</cn>
                  <cn cellml:units="millivolt">1000</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_synE</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="i_synI">
      <variable units="nanoA" public_interface="out" name="i_synI"/>
      
	  <variable units="nanoS" public_interface="in" name="g_synI"/>
      <variable units="millivolt" public_interface="in" name="E_synI"/>
      <variable units="millivolt" public_interface="in" name="V"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_synI</ci>
            <apply>
               <times/>
               <ci>g_synI</ci>
               <apply>
                  <divide/>
                  <cn cellml:units="volt">1</cn>
                  <cn cellml:units="millivolt">1000</cn>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_synI</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="s_e">
      <variable units="dimensionless" public_interface="out" name="s_e" initial_value="1.00000"/>
     
	  <variable units="millisecond" name="tau_E" initial_value="5.0"/>
	 
	  <variable units="millisecond" public_interface="in" name="time"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>s_e</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
			      <ci>s_e</ci>
			   </apply>
			   <ci>tau_E</ci>
			</apply>
         </apply>
      </math>
   </component>
   
   <component name="model_parameters">
      <variable units="nanoF" public_interface="out" name="C" initial_value="36000.00"/>
	  <variable units="millivolt" public_interface="out" name="E_Na" initial_value="55.0"/>
	  <variable units="millivolt" public_interface="out" name="E_K" initial_value="-94.0"/>
	  <variable units="millivolt" public_interface="out" name="E_L" initial_value="1.00000"/>
	  <variable units="millivolt" public_interface="out" name="E_synE" initial_value="-10.0"/>
	  <variable units="millivolt" public_interface="out" name="E_synI" initial_value="-75.0"/>
	  <variable units="nanoS" public_interface="out" name="g_Na" initial_value="170.0"/>
	  <variable units="nanoS" public_interface="out" name="g_K" initial_value="180.0"/>
	  <variable units="nanoS" public_interface="out" name="g_NaP" initial_value="1.00000"/>
	  <variable units="nanoS" public_interface="out" name="g_L" initial_value="2.5"/>
	  <variable units="nanoS" public_interface="out" name="g_synE"/>
	  <variable units="nanoS" public_interface="out" name="g_synI"/>
	    
	  <variable units="dimensionless" public_interface="in" name="S1"/>
	  <variable units="dimensionless" public_interface="in" name="S3"/>
	  <variable units="dimensionless" public_interface="in" name="S4"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
	     <apply>
            <eq/>
            <ci>g_synE</ci>
            <apply>
               <plus/>
               <cn cellml:units="nanoS">0.43</cn>
               <apply>
                  <times/>
				  <cn cellml:units="nanoS">0.03</cn>
                  <ci>S1</ci>
               </apply>
            </apply>
         </apply>
		 
		 <apply>
            <eq/>
            <ci>g_synI</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
				  <cn cellml:units="nanoS">0.025</cn>
                  <ci>S3</ci>
               </apply>
               <apply>
                  <times/>
				  <cn cellml:units="nanoS">0.225</cn>
                  <ci>S4</ci>
               </apply>
            </apply>
         </apply>
	  </math>
   </component>
	 
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="pre_I">
	     <component_ref component="V"/>
		 <component_ref component="i_Na">
            <component_ref component="i_Na_m_gate"/>
		    <component_ref component="i_Na_h_gate"/>
         </component_ref>
	     <component_ref component="i_K">
            <component_ref component="i_K_m_gate"/>
	     </component_ref>
	     <component_ref component="i_NaP">
            <component_ref component="i_NaP_m_gate"/>
		    <component_ref component="i_NaP_h_gate"/>
         </component_ref>
	     <component_ref component="i_L"/>
		 <component_ref component="i_synE"/>
		 <component_ref component="i_synI"/>
		 <component_ref component="s_e"/>
		 <component_ref component="model_parameters"/>
	  </component_ref>
   </group>
 
   
   <connection>
      <map_components component_2="V" component_1="i_Na"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_Na" variable_1="i_Na"/>
   </connection>
   
   <connection>
      <map_components component_2="V" component_1="i_NaP"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_NaP" variable_1="i_NaP"/>
   </connection>
   
   <connection>
      <map_components component_2="V" component_1="i_K"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_K" variable_1="i_K"/>
   </connection>
   
   <connection>
      <map_components component_2="V" component_1="i_L"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_L" variable_1="i_L"/>
   </connection>
   
   <connection>
      <map_components component_2="V" component_1="i_synE"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_synE" variable_1="i_synE"/>
   </connection>
   
   <connection>
      <map_components component_2="V" component_1="i_synI"/>
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_synI" variable_1="i_synI"/>
   </connection>
   
   <connection>
      <map_components component_2="V" component_1="model_parameters"/>
      <map_variables variable_2="C" variable_1="C"/>
   </connection>
  
   <connection>
      <map_components component_2="i_Na" component_1="model_parameters"/>
      <map_variables variable_2="E_Na" variable_1="E_Na"/>
      <map_variables variable_2="g_Na" variable_1="g_Na"/>
   </connection>
   
   <connection>
      <map_components component_2="i_NaP" component_1="model_parameters"/>
      <map_variables variable_2="E_Na" variable_1="E_Na"/>
      <map_variables variable_2="g_NaP" variable_1="g_NaP"/>
   </connection>
   
   <connection>
      <map_components component_2="i_K" component_1="model_parameters"/>
      <map_variables variable_2="E_K" variable_1="E_K"/>
      <map_variables variable_2="g_K" variable_1="g_K"/>
   </connection>
   
   <connection>
      <map_components component_2="i_L" component_1="model_parameters"/>
      <map_variables variable_2="E_L" variable_1="E_L"/>
      <map_variables variable_2="g_L" variable_1="g_L"/>
   </connection>
   
   <connection>
      <map_components component_2="i_synE" component_1="model_parameters"/>
      <map_variables variable_2="E_synE" variable_1="E_synE"/>
      <map_variables variable_2="g_synE" variable_1="g_synE"/>
   </connection>
   
   <connection>
      <map_components component_2="i_synI" component_1="model_parameters"/>
      <map_variables variable_2="E_synI" variable_1="E_synI"/>
      <map_variables variable_2="g_synI" variable_1="g_synI"/>
   </connection>
   
   <connection>
      <map_components component_2="i_Na_m_gate" component_1="i_Na"/>
      <map_variables variable_2="m" variable_1="m"/>
      <map_variables variable_2="V" variable_1="V"/>
	  <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="i_Na_h_gate" component_1="i_Na"/>
      <map_variables variable_2="h" variable_1="h"/>
      <map_variables variable_2="V" variable_1="V"/>
	  <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="i_NaP_m_gate" component_1="i_NaP"/>
      <map_variables variable_2="m" variable_1="m"/>
      <map_variables variable_2="V" variable_1="V"/>
	  <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="i_NaP_h_gate" component_1="i_NaP"/>
      <map_variables variable_2="h" variable_1="h"/>
      <map_variables variable_2="V" variable_1="V"/>
	  <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="i_K_m_gate" component_1="i_K"/>
      <map_variables variable_2="m" variable_1="m"/>
      <map_variables variable_2="V" variable_1="V"/>
	  <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   
   
   <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    
	<rdf:Description rdf:about="">
      <dc:title>Preinspiratory neuron</dc:title>
	  
	  <dc:creator rdf:parseType="Resource">
        <vCard:N rdf:parseType="Resource">
          <vCard:Family>Lloyd</vCard:Family>
          <vCard:Given>Catherine</vCard:Given>
		  <vCard:Other>May</vCard:Other>
        </vCard:N>
        <vCard:EMAIL rdf:parseType="Resource">
          <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland</vCard:Orgname>
          <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
    </rdf:Description>
    
    <rdf:Description rdf:about="#smith_2007_pre_I">
      
	  <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>neuron</rdf:li>
		      <rdf:li>neurobiology</rdf:li>
              <rdf:li>network</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>

      <bqs:reference rdf:parseType="Resource">
        <bqs:Pubmed_id>17913982</bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator>
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Smith</vCard:Family>
                    <vCard:Given>J</vCard:Given>
					<vCard:Other>C</vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Abdala</vCard:Family>
                    <vCard:Given>A</vCard:Given>
					<vCard:Other>P</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Koizumi</vCard:Family>
                    <vCard:Given>H</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Rybak</vCard:Family>
                    <vCard:Given>I</vCard:Given>
					<vCard:Other>A</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Paton</vCard:Family>
                    <vCard:Given>J</vCard:Given>
					<vCard:Other>F</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title>
            Spatial and functional architecture of the mammalian brain stem respiratory network: a hierarchy of three oscillatory mechanisms
          </dc:title>
          <dcterms:issued rdf:parseType="Resource">
            <dcterms:W3CDTF>2007-12</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title>Journal of Neurophysiology</dc:title>
          </bqs:Journal>
		  <bqs:volume>98</bqs:volume>
          <bqs:first_page>3370</bqs:first_page>
          <bqs:last_page>3387</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
</model>