<model
    name="smith_2007_synaptic_coupling"
    cmeta:id="smith_2007_synaptic_coupling"
    xmlns="http://www.cellml.org/cellml/1.1#"
    xmlns:cellml="http://www.cellml.org/cellml/1.1#"
    xmlns:cmeta="http://www.cellml.org/metadata/1.0#"
    xmlns:xlink="http://www.w3.org/1999/xlink"
    xmlns:dc="http://purl.org/dc/elements/1.1/"
    xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" 
    xmlns:bqs="http://www.cellml.org/bqs/1.0#" 
    xmlns:dcterms="http://purl.org/dc/terms/"
    xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">

	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Spatial and functional architecture of the mammalian brain stem respiratory network: a hierarchy of three oscillatory mechanisms</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This CellML model represents the synaptic coupling between the four different neuronal populations which make up the brain stem respiratory network computational model described by Smith et al. 2007, and modified by Dr Carlo Laing.</para>
			<para>  This is a CellML1.1 model, the units have been checked and they are consistent.  In order to fully reproduce the results of the original published model we need to duplicate each neuron 50 times to represent a population of cells.  We also need to introduce heterogeneity between cells to make the model physiologically realistic.  This heterogeneity can be introduced by randomly sampling certain parameter values from a population.  In addition, initial conditions for each variable should be randomly chosen from a uniform distribution.  Finally, the published model descibes three oscillatory mechanisms; namely the three-phase, two-phase, and one-phase rhythms.  The CellML model described here represents the two-phase rhythm.  Equations for gsynE and gsynI will have to be adjusted to produce the one-, and three-phase rhythms.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
Abstract: Mammalian central pattern generators (CPGs) producing rhythmic movements exhibit extremely robust and flexible behavior. Network architectures that enable these features are not well understood. Here we studied organization of the brain stem respiratory CPG. By sequential rostral to caudal transections through the pontine-medullary respiratory network within an in situ perfused rat brain stem-spinal cord preparation, we showed that network dynamics reorganized and new rhythmogenic mechanisms emerged. The normal three-phase respiratory rhythm transformed to a two-phase and then to a one-phase rhythm as the network was reduced. Expression of the three-phase rhythm required the presence of the pons, generation of the two-phase rhythm depended on the integrity of Botzinger and pre-Botzinger complexes and interactions between them, and the one-phase rhythm was generated within the pre-Botzinger complex. Transformation from the three-phase to a two-phase pattern also occurred in intact preparations when chloride-mediated synaptic inhibition was reduced. In contrast to the three-phase and two-phase rhythms, the one-phase rhythm was abolished by blockade of persistent sodium current (I(NaP)). A model of the respiratory network was developed to reproduce and explain these observations. The model incorporated interacting populations of respiratory neurons within spatially organized brain stem compartments. Our simulations reproduced the respiratory patterns recorded from intact and sequentially reduced preparations. Our results suggest that the three-phase and two-phase rhythms involve inhibitory network interactions, whereas the one-phase rhythm depends on I(NaP). We conclude that the respiratory network has rhythmogenic capabilities at multiple levels of network organization, allowing expression of motor patterns specific for various physiological and pathophysiological respiratory behaviors.</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="smith_2007.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic of the computational model of the brain stem respiratory network. Model includes interacting neuronal populations within major brain stem respiratory compartments (Pons, BotC, pre-BotC, and rVRG). Spheres represent neuronal populations (excitatory, red; inhibitory, blue; motoneuronal, brown); green triangles represent sources of tonic excitatory drives (in pons, RTN/BotC, and pre-BotC compartments) to different neural populations. Excitatory and inhibitory synaptic connections are indicated by arrows and small circles, respectively. Simulated 
'transections' (dashed lines) mimic those performed in situ.</caption>
</informalfigure>

				<para>
The original paper reference is cited below:
</para>
				<para>
Spatial and functional architecture of the mammalian brain stem respiratory network: a hierarchy of three oscillatory mechanisms, Smith JC, Abdala AP, Koizumi H, Rybak IA, Paton JF, 2007, <emphasis>Journal of Neurophysiology</emphasis>, 98, 3370-3387. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/17913982">PubMed ID: 17913982.</ulink>
				</para>
			
			</sect1>
		</article>
	</documentation>  
	
	<import xlink:href="smith_2007_pre_I.cellml">
       <component name="pre_I" component_ref="pre_I" />
    </import>
	
	<connection>
       <map_components component_1="pre_I" component_2="environment" />
       <map_variables variable_1="time" variable_2="time" />
    </connection>
	
	<connection>
       <map_components component_1="pre_I" component_2="S1" />
       <map_variables variable_1="S1" variable_2="S1" />
	   <map_variables variable_1="s_e" variable_2="s_e" />
    </connection>
	
	<connection>
       <map_components component_1="pre_I" component_2="S3" />
       <map_variables variable_1="S3" variable_2="S3" />
    </connection>
	
	<connection>
       <map_components component_1="pre_I" component_2="S4" />
       <map_variables variable_1="S4" variable_2="S4" />
    </connection>
	
	<import xlink:href="smith_2007_early_I.cellml">
       <component name="early_I" component_ref="early_I" />
    </import>
	
	<connection>
       <map_components component_1="early_I" component_2="environment" />
       <map_variables variable_1="time" variable_2="time" />
    </connection>
	
	<connection>
       <map_components component_1="early_I" component_2="S1" />
       <map_variables variable_1="S1" variable_2="S1" />
	</connection>
	
	<connection>
       <map_components component_1="early_I" component_2="S3" />
       <map_variables variable_1="S3" variable_2="S3" />
    </connection>
	
	<connection>
       <map_components component_1="early_I" component_2="S4" />
       <map_variables variable_1="S4" variable_2="S4" />
    </connection>
	
	<connection>
       <map_components component_1="early_I" component_2="S2" />
       <map_variables variable_1="s_i" variable_2="s_i" />
    </connection>
	
	<import xlink:href="smith_2007_post_I.cellml">
       <component name="post_I" component_ref="post_I" />
    </import>
	
	<connection>
       <map_components component_1="post_I" component_2="environment" />
       <map_variables variable_1="time" variable_2="time" />
    </connection>
	
	<connection>
       <map_components component_1="post_I" component_2="S2" />
       <map_variables variable_1="S2" variable_2="S2" />
    </connection>
	
	<connection>
       <map_components component_1="post_I" component_2="S3" />
       <map_variables variable_1="S3" variable_2="S3" />
    </connection>
	
	<connection>
       <map_components component_1="post_I" component_2="S4" />
       <map_variables variable_1="s_i" variable_2="s_i" />
    </connection>
	
	<import xlink:href="smith_2007_aug_E.cellml">
       <component name="aug_E" component_ref="aug_E" />
    </import>
	
	<connection>
       <map_components component_1="aug_E" component_2="environment" />
       <map_variables variable_1="time" variable_2="time" />
    </connection>
	
	<connection>
       <map_components component_1="aug_E" component_2="S2" />
       <map_variables variable_1="S2" variable_2="S2" />
    </connection>
	
	<connection>
       <map_components component_1="aug_E" component_2="S4" />
       <map_variables variable_1="S4" variable_2="S4" />
    </connection>
	
	<connection>
       <map_components component_1="aug_E" component_2="S3" />
       <map_variables variable_1="s_i" variable_2="s_i" />
    </connection>
	
	

    <units name="millisecond">
      <unit units="second" prefix="milli"/>
    </units>
	
   <component name="environment">
      <variable units="millisecond" public_interface="out" name="time"/>
   </component>	
   
   <component name="S1">
      <variable units="dimensionless" public_interface="out" name="S1"/>
     
	  <variable units="dimensionless" public_interface="in" name="k"/>
	  <variable units="dimensionless" public_interface="in" name="s_e"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>S1</ci>
            <apply><sum/>
               <bvar><ci>k</ci></bvar>
               <lowlimit><cn cellml:units="dimensionless">1</cn></lowlimit>
               <uplimit><cn cellml:units="dimensionless">50</cn></uplimit>
               <apply><power/>
			      <ci>s_e</ci>
			      <ci>k</ci>
			   </apply>
            </apply>
         </apply>
      </math> 
   </component>
   
   <component name="S2">
      <variable units="dimensionless" public_interface="out" name="S2"/>
     
	  <variable units="dimensionless" public_interface="in" name="k"/>
	  <variable units="dimensionless" public_interface="in" name="s_i"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>S2</ci>
            <apply><times/>
			   <apply><divide/>
			      <cn cellml:units="dimensionless">1</cn>
				  <cn cellml:units="dimensionless">3</cn>
			   </apply>
			   <apply><sum/>
                  <bvar><ci>k</ci></bvar>
                  <lowlimit><cn cellml:units="dimensionless">1</cn></lowlimit>
                  <uplimit><cn cellml:units="dimensionless">50</cn></uplimit>
                  <apply><power/>
			         <ci>s_i</ci>
			         <ci>k</ci>
			      </apply>
			   </apply>
            </apply>
         </apply>
      </math> 
   </component>
   
   <component name="S3">
      <variable units="dimensionless" public_interface="out" name="S3"/>
     
	  <variable units="dimensionless" public_interface="in" name="k"/>
	  <variable units="dimensionless" public_interface="in" name="s_i"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>S3</ci>
            <apply><times/>
			   <apply><divide/>
			      <cn cellml:units="dimensionless">1</cn>
				  <cn cellml:units="dimensionless">3</cn>
			   </apply>
			   <apply><sum/>
                  <bvar><ci>k</ci></bvar>
                  <lowlimit><cn cellml:units="dimensionless">1</cn></lowlimit>
                  <uplimit><cn cellml:units="dimensionless">50</cn></uplimit>
                  <apply><power/>
			         <ci>s_i</ci>
			         <ci>k</ci>
			      </apply>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="S4">
      <variable units="dimensionless" public_interface="out" name="S4"/>
     
	  <variable units="dimensionless" public_interface="in" name="k"/>
	  <variable units="dimensionless" public_interface="in" name="s_i"/>
	  
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>S4</ci>
            <apply><times/>
			   <apply><divide/>
			      <cn cellml:units="dimensionless">1</cn>
				  <cn cellml:units="dimensionless">3</cn>
			   </apply>
			   <apply><sum/>
                  <bvar><ci>k</ci></bvar>
                  <lowlimit><cn cellml:units="dimensionless">1</cn></lowlimit>
                  <uplimit><cn cellml:units="dimensionless">50</cn></uplimit>
                  <apply><power/>
			         <ci>s_i</ci>
			         <ci>k</ci>
			      </apply>
			   </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="model_parameters">
      <variable units="dimensionless" public_interface="out" name="k" initial_value="1.000000"/>
   </component>

   <connection>
      <map_components component_1="model_parameters" component_2="S1" />
      <map_variables variable_1="k" variable_2="k" />
   </connection> 

   <connection>
      <map_components component_1="model_parameters" component_2="S2" />
      <map_variables variable_1="k" variable_2="k" />
   </connection> 

   <connection>
      <map_components component_1="model_parameters" component_2="S3" />
      <map_variables variable_1="k" variable_2="k" />
   </connection> 

   <connection>
      <map_components component_1="model_parameters" component_2="S4" />
      <map_variables variable_1="k" variable_2="k" />
   </connection>    
   
   
   <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    
	<rdf:Description rdf:about="">
      <dc:title>Synaptic coupling</dc:title>
	  
	  <dc:creator rdf:parseType="Resource">
        <vCard:N rdf:parseType="Resource">
          <vCard:Family>Lloyd</vCard:Family>
          <vCard:Given>Catherine</vCard:Given>
		  <vCard:Other>May</vCard:Other>
        </vCard:N>
        <vCard:EMAIL rdf:parseType="Resource">
          <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland</vCard:Orgname>
          <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
    </rdf:Description>
    
    <rdf:Description rdf:about="#smith_2007_synaptic_coupling">
      
	  <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>neuron</rdf:li>
		      <rdf:li>neurobiology</rdf:li>
              <rdf:li>network</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>

      <bqs:reference rdf:parseType="Resource">
        <bqs:Pubmed_id>17913982</bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator>
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Smith</vCard:Family>
                    <vCard:Given>J</vCard:Given>
					<vCard:Other>C</vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Abdala</vCard:Family>
                    <vCard:Given>A</vCard:Given>
					<vCard:Other>P</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Koizumi</vCard:Family>
                    <vCard:Given>H</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Rybak</vCard:Family>
                    <vCard:Given>I</vCard:Given>
					<vCard:Other>A</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Paton</vCard:Family>
                    <vCard:Given>J</vCard:Given>
					<vCard:Other>F</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title>
            Spatial and functional architecture of the mammalian brain stem respiratory network: a hierarchy of three oscillatory mechanisms
          </dc:title>
          <dcterms:issued rdf:parseType="Resource">
            <dcterms:W3CDTF>2007-12</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title>Journal of Neurophysiology</dc:title>
          </bqs:Journal>
		  <bqs:volume>98</bqs:volume>
          <bqs:first_page>3370</bqs:first_page>
          <bqs:last_page>3387</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
</model>
   