// This CellML file was generated on 19/02/2015 at 15:10:53 using:
//
// COR (0.9.31.1409)
// Copyright 2002-2015 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
def model pandit_hinch as
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_mV2 as
    unit volt {pref: milli, expo: -2};
  enddef;
  def unit uL as
    unit litre {pref: micro};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit uS as
    unit siemens {pref: micro};
  enddef;
  def unit mSi as
    unit siemens {pref: milli};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit second {pref: milli, expo: -1};
  enddef;
  def unit um3 as
    unit meter {pref: micro, expo: 3};
  enddef;
  def unit um3_per_ms as
    unit meter {pref: micro, expo: 3};
    unit second {pref: milli, expo: -1};
  enddef;
  def unit um3_mM_per_ms as
    unit meter {pref: micro, expo: 3};
    unit mM;
    unit second {pref: milli, expo: -1};
  enddef;
  def unit mM_per_mV_ms as
    unit mM;
    unit second {pref: milli, expo: -1};
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_ms3 as
    unit second {pref: milli, expo: -3};
  enddef;
  def unit per_mM_ms as
    unit mM {expo: -1};
    unit second {pref: milli, expo: -1};
  enddef;
  def unit mJ_per_mole_K as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit N_per_mM2 as
    unit newton;
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp membrane as
    var V: mV {init: -83.5486878017526, pub: out};
    var R: millijoule_per_mole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96487, pub: out};
    var time: ms {pub: in};
    var Cm: uF {init: 0.0001};
    var i_Na: uA {pub: in};
    var i_t: uA {pub: in};
    var i_ss: uA {pub: in};
    var i_K1: uA {pub: in};
    var i_f: uA {pub: in};
    var i_B_Na: uA {pub: in};
    var i_B_K: uA {pub: in};
    var i_NaK: uA {pub: in};
    var i_Ncx2: uA {pub: in};
    var i_pCa2: uA {pub: in};
    var i_LCC2: uA {pub: in};
    var i_CaB2: uA {pub: in};
    var i_Stim: uA {pub: out};
    var stim_period: ms {init: 167};
    var stim_duration: ms {init: 3};
    var stim_amplitude: uA {init: -0.0012};
    var FVRT: dimensionless {pub: out};
    var FVRT_Ca: dimensionless {pub: out};
    FVRT = F*V/(R*T);
    FVRT_Ca = 2{dimensionless}*FVRT;
    i_Stim = sel
      case (time-floor(time/stim_period)*stim_period >= 0{ms}) and (time-floor(time/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{uA};
    endsel;
    ode(V, time) = -(i_Na+i_t+i_ss+i_f+i_K1+i_B_Na+i_B_K+i_NaK+i_CaB2+i_Ncx2+i_pCa2+i_LCC2+i_Stim)/Cm;
  enddef;

  def comp cell_geometry as
    var Vmyo: um3 {init: 25850, pub: out};
    var Vmyo_uL: uL {init: 2.585e-5, pub: out};
    var VSR_uL: uL {init: 2.098e-6, pub: out};
  enddef;

  def comp sodium_current as
    var i_Na: uA {pub: out};
    var E_Na: mV {pub: out};
    var g_Na: mSi {init: 0.0007};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp sodium_current_m_gate as
    var m: dimensionless {init: 0.00264996385357493, pub: out};
    var m_infinity: dimensionless;
    var tau_m: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45{mV})/(-6.5{mV})));
    tau_m = 1.36{ms}/(0.32{per_mV}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})))+0.08{dimensionless}*exp(-V/11{mV}));
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp sodium_current_h_gate as
    var h: dimensionless {init: 0.764915362203661, pub: out};
    var h_infinity: dimensionless;
    var tau_h: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+76.1{mV})/6.07{mV}));
    tau_h = sel
      case V >= -40{mV}:
        0.4537{ms}*(1{dimensionless}+exp(-(V+10.66{mV})/11.1{mV}));
      otherwise:
        3.49{ms}/(0.135{dimensionless}*exp(-(V+80{mV})/6.8{mV})+3.56{dimensionless}*exp(0.079{per_mV}*V)+310000{dimensionless}*exp(0.35{per_mV}*V));
    endsel;
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp sodium_current_j_gate as
    var j: dimensionless {init: 0.593238313370696, pub: out};
    var j_infinity: dimensionless;
    var tau_j: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    j_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+76.1{mV})/6.07{mV}));
    tau_j = sel
      case V >= -40{mV}:
        11.63{ms}*(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV})))/exp(-0.0000002535{per_mV}*V);
      otherwise:
        3.49{ms}/((V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})))*(-127140{per_mV}*exp(0.2444{per_mV}*V)-0.00003474{per_mV}*exp(-0.04391{per_mV}*V))+0.1212{dimensionless}*exp(-0.01052{per_mV}*V)/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}))));
    endsel;
    ode(j, time) = (j_infinity-j)/tau_j;
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    var i_t: uA {pub: out};
    var E_K: mV {pub: out};
    var g_t: mSi {init: 1.96e-5};
    var a: dimensionless {init: 0.883};
    var b: dimensionless {init: 0.117};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var r: dimensionless {priv: in};
    var s: dimensionless {priv: in};
    var s_slow: dimensionless {priv: in};
    E_K = R*T/F*ln(K_o/K_i);
    i_t = g_t*r*(a*s+b*s_slow)*(V-E_K);
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var r: dimensionless {init: 0.00167914037093536, pub: out};
    var tau_r: ms;
    var r_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+10.6{mV})/(-11.42{mV})));
    tau_r = 100{ms}/(45.16{dimensionless}*exp(0.03577{per_mV}*(V+50{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(V+38{mV})));
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_gate as
    var s: dimensionless {init: 0.942364196302614, pub: out};
    var tau_s: ms;
    var s_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    s_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45.3{mV})/6.8841{mV}));
    tau_s = 20{ms}*exp(-sqr((V+70{mV})/25{mV}))+35{ms};
    ode(s, time) = (s_infinity-s)/tau_s;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_slow_gate as
    var s_slow: dimensionless {init: 0.289751848759626, pub: out};
    var tau_s_slow: ms;
    var s_slow_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    s_slow_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45.3{mV})/6.8841{mV}));
    tau_s_slow = 1300{ms}*exp(-sqr((V+70{mV})/30{mV}))+35{ms};
    ode(s_slow, time) = (s_slow_infinity-s_slow)/tau_s_slow;
  enddef;

  def comp steady_state_outward_K_current as
    var i_ss: uA {pub: out};
    var g_ss: mSi {init: 1.2e-5};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var E_K: mV {pub: in};
    var r_ss: dimensionless {priv: in};
    var s_ss: dimensionless {priv: in};
    i_ss = g_ss*r_ss*s_ss*(V-E_K);
  enddef;

  def comp steady_state_outward_K_current_r_ss_gate as
    var r_ss: dimensionless {init: 0.00224986598955826, pub: out};
    var tau_r_ss: ms;
    var r_ss_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    r_ss_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+11.5{mV})/(-11.82{mV})));
    tau_r_ss = 10000{ms}/(45.16{dimensionless}*exp(0.03577{per_mV}*(V+50{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(V+38{mV})));
    ode(r_ss, time) = (r_ss_infinity-r_ss)/tau_r_ss;
  enddef;

  def comp steady_state_outward_K_current_s_ss_gate as
    var s_ss: dimensionless {init: 0.253344243516578, pub: out};
    var tau_s_ss: ms;
    var s_ss_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    s_ss_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+87.5{mV})/10.3{mV}));
    tau_s_ss = 2100{ms};
    ode(s_ss, time) = (s_ss_infinity-s_ss)/tau_s_ss;
  enddef;

  def comp inward_rectifier as
    var i_K1: uA {pub: out};
    var g_K1: mSi {init: 4e-5};
    var V: mV {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var E_K: mV {pub: in};
    i_K1 = (0.048{uA}/(exp((V+37{mV})/25{mV})+exp((V+37{mV})/(-25{mV})))+0.01{uA})*0.001{dimensionless}/(1{dimensionless}+exp((V-(E_K+76.77{mV}))/(-17{mV})))+g_K1*(V-(E_K+1.73{mV}))/((1{dimensionless}+exp(1.613{dimensionless}*F*(V-(E_K+1.73{mV}))/(R*T)))*(1{dimensionless}+exp((K_o-0.9988{mM})/(-0.124{mM}))));
  enddef;

  def comp hyperpolarisation_activated_current as
    var i_f: uA {pub: out};
    var i_f_Na: uA {pub: out};
    var i_f_K: uA {pub: out};
    var g_f: mSi {init: 1.45e-6};
    var f_Na: dimensionless {init: 0.2};
    var f_K: dimensionless;
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var E_K: mV {pub: in};
    var E_Na: mV {pub: in};
    var y: dimensionless {priv: in};
    f_K = 1{dimensionless}-f_Na;
    i_f_Na = g_f*y*f_Na*(V-E_Na);
    i_f_K = g_f*y*f_K*(V-E_K);
    i_f = i_f_Na+i_f_K;
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var y: dimensionless {init: 0.00290576866153454, pub: out};
    var tau_y: ms;
    var y_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+138.6{mV})/10.48{mV}));
    tau_y = 1000{ms}/(0.11885{dimensionless}*exp((V+80{mV})/28.37{mV})+0.5623{dimensionless}*exp((V+80{mV})/(-14.19{mV})));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp background_currents as
    var i_B: uA {pub: out};
    var i_B_Na: uA {pub: out};
    var i_B_K: uA {pub: out};
    var g_B_Na: mSi {init: 8.015e-8};
    var g_B_K: mSi {init: 1.38e-7};
    var E_Na: mV {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    i_B_Na = g_B_Na*(V-E_Na);
    i_B_K = g_B_K*(V-E_K);
    i_B = i_B_Na+i_B_K;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: uA {pub: out};
    var i_NaK_max: uA {init: 0.00138};
    var nu_1: dimensionless;
    var gamma1: dimensionless {init: 3.6};
    var KdNaio: mM {init: 19};
    var KdNais: mM {init: 22};
    var KdNaes: mM {init: 880};
    var Delta: dimensionless {init: 0.3};
    var alpha: mM {init: 1.8};
    var K_o: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    nu_1 = gamma1*sqr(1{dimensionless}+KdNaio/Na_i)*(1{dimensionless}+KdNais/Na_i*exp(-Delta*F*V/R/T))+sqr(1{dimensionless}+alpha/K_o)*(1{dimensionless}+Na_o/KdNaes*exp(-(1{dimensionless}-Delta)*F*V/R/T));
    i_NaK = i_NaK_max*(gamma1+1{dimensionless})/nu_1;
  enddef;

  def comp extracellular_ion_concentrations as
    var K_o: mM {init: 5.4, pub: out};
    var Na_o: mM {init: 140, pub: out};
    var Ca_o: mM {init: 1.8, pub: out};
  enddef;

  def comp CaRU as
    var g_D: um3_per_ms {init: 0.099, priv: out};
    var J_R: um3_per_ms {init: 0.02, priv: out};
    var J_L: um3_per_ms {init: 0.0007, priv: out};
    var Vmyo: um3 {pub: in, priv: out};
    var Vmyo_uL: uL {pub: in, priv: out};
    var N: dimensionless {init: 50000, priv: out};
    var V: mV {pub: in, priv: out};
    var Ca_i: mM {pub: in, priv: out};
    var Ca_o: mM {pub: in, priv: out};
    var Ca_SR: mM {pub: in, priv: out};
    var time: ms {pub: in, priv: out};
    var F: coulomb_per_mole {pub: in, priv: out};
    var FVRT_Ca: dimensionless {pub: in, priv: out};
    var i_RyR2: mM_per_ms {pub: out, priv: in};
    var i_LCC2: uA {pub: out, priv: in};
  enddef;

  def comp CaRU_Transitions as
    var V: mV {pub: in};
    var C_oc: mM {pub: in};
    var C_co: mM {pub: in};
    var Ca_i: mM {pub: in};
    var V_L: mV {init: -9};
    var del_VL: mV {init: 7};
    var phi_L: dimensionless {init: 11.5};
    var t_L: ms {init: 1};
    var tau_L: ms {init: 1450};
    var t_R: ms {init: 1.17};
    var tau_R: ms {init: 2.4};
    var phi_R: dimensionless {init: 0.05};
    var theta_R: dimensionless {init: 0.012};
    var K_RyR: mM {init: 0.065};
    var K_L: mM {init: 0.0006};
    var a1: dimensionless {init: 0.0625};
    var b1: dimensionless {init: 14};
    var c: dimensionless {init: 0.01};
    var d: dimensionless {init: 100};
    var expVL: dimensionless;
    var alpha_p: per_ms {pub: out};
    var alpha_m: per_ms {pub: out};
    var beta_poc: per_ms {pub: out};
    var beta_pcc: per_ms {pub: out};
    var beta_m: per_ms {pub: out};
    var epsilon_pco: per_ms {pub: out};
    var epsilon_pcc: per_ms {pub: out};
    var epsilon_m: per_ms {pub: out};
    var mu_poc: per_ms {pub: out};
    var mu_pcc: per_ms {pub: out};
    var mu_moc: per_ms {pub: out};
    var mu_mcc: per_ms {pub: out};
    expVL = exp((V-V_L)/del_VL);
    alpha_p = expVL/(t_L*(expVL+1{dimensionless}));
    alpha_m = phi_L/t_L;
    beta_poc = sqr(C_oc)/(t_R*(sqr(C_oc)+sqr(K_RyR)));
    beta_pcc = sqr(Ca_i)/(t_R*(sqr(Ca_i)+sqr(K_RyR)));
    beta_m = phi_R/t_R;
    epsilon_pco = C_co*(expVL+a1)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_pcc = Ca_i*(expVL+a1)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_m = b1*(expVL+a1)/(tau_L*(b1*expVL+a1));
    mu_poc = (sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(sqr(C_oc)+sqr(K_RyR)));
    mu_pcc = (sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(sqr(Ca_i)+sqr(K_RyR)));
    mu_moc = theta_R*d*(sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(d*sqr(C_oc)+c*sqr(K_RyR)));
    mu_mcc = theta_R*d*(sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(d*sqr(Ca_i)+c*sqr(K_RyR)));
  enddef;

  def comp DS_Calcium_Concentrations as
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FVRT_Ca: dimensionless {pub: in};
    var g_D: um3_per_ms {pub: in};
    var J_R: um3_per_ms {pub: in};
    var J_L: um3_per_ms {pub: in};
    var C_cc: mM {pub: out};
    var C_oc: mM {pub: out};
    var C_co: mM {pub: out};
    C_cc = Ca_i;
    C_co = (Ca_i+J_R/g_D*Ca_SR)/(1{dimensionless}+J_R/g_D);
    C_oc = sel
      case abs(FVRT_Ca) > 0.000000001{dimensionless}:
        (Ca_i+J_L/g_D*Ca_o*FVRT_Ca*exp(-FVRT_Ca)/(1{dimensionless}-exp(-FVRT_Ca)))/(1{dimensionless}+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        (Ca_i+J_L/g_D*Ca_o)/(1{dimensionless}+J_L/g_D);
    endsel;
  enddef;

  def comp LCC_and_RyR_fluxes as
    var g_D: um3_per_ms {pub: in};
    var J_R: um3_per_ms {pub: in};
    var J_L: um3_per_ms {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FVRT_Ca: dimensionless {pub: in};
    var J_Loo: um3_mM_per_ms {pub: out};
    var J_Loc: um3_mM_per_ms {pub: out};
    var J_Rco: um3_mM_per_ms {pub: out};
    var J_Roo: um3_mM_per_ms {pub: out};
    J_Rco = J_R*(Ca_SR-Ca_i)/(1{dimensionless}+J_R/g_D);
    J_Roo = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_R*(Ca_SR-Ca_i+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_SR-Ca_o*exp(-FVRT_Ca)))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_R*(Ca_SR-Ca_i+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_SR-Ca_o*exp(-0.00001{dimensionless})))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loc = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_L*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i)/(1{dimensionless}+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_o*exp(-0.00001{dimensionless})-Ca_i)/(1{dimensionless}+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loo = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_L*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i+J_R/g_D*(Ca_o*exp(-FVRT_Ca)-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(FVRT_Ca)));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_o*exp(-0.00001{dimensionless})-Ca_i+J_R/g_D*(Ca_o*exp(-0.00001{dimensionless})-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
  enddef;

  def comp CaRU_states as
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_poc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var denom: per_ms3;
    var P1: dimensionless {pub: out};
    var P2: dimensionless {pub: out};
    var P3: dimensionless {pub: out};
    var P4: dimensionless {pub: out};
    denom = (alpha_p+alpha_m)*((alpha_m+beta_m+beta_poc)*(beta_m+beta_pcc)+alpha_p*(beta_m+beta_poc));
    P1 = alpha_p*beta_m*(alpha_p+alpha_m+beta_m+beta_pcc)/denom;
    P2 = alpha_m*(beta_pcc*(alpha_m+beta_m+beta_poc)+beta_poc*alpha_p)/denom;
    P3 = alpha_p*(beta_poc*(alpha_p+beta_m+beta_pcc)+beta_pcc*alpha_m)/denom;
    P4 = alpha_m*beta_m*(alpha_m+alpha_p+beta_m+beta_poc)/denom;
  enddef;

  def comp CaRU_reduced_states as
    var P1: dimensionless {pub: in};
    var P4: dimensionless {pub: in};
    var P2: dimensionless {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var epsilon_pco: per_ms {pub: in};
    var epsilon_pcc: per_ms {pub: in};
    var epsilon_m: per_ms {pub: in};
    var mu_poc: per_ms {pub: in};
    var mu_pcc: per_ms {pub: in};
    var mu_moc: per_ms {pub: in};
    var mu_mcc: per_ms {pub: in};
    var r_1: per_ms {pub: out};
    var r_2: per_ms {pub: out};
    var r_3: per_ms {pub: out};
    var r_4: per_ms {pub: out};
    var r_5: per_ms {pub: out};
    var r_6: per_ms {pub: out};
    var r_7: per_ms {pub: out};
    var r_8: per_ms {pub: out};
    var z_1: dimensionless {init: 0.93527246301579, pub: out};
    var z_2: dimensionless {init: 0.00895634833667885, pub: out};
    var z_3: dimensionless {init: 0.0552423715970428, pub: out};
    var z_4: dimensionless {pub: out};
    var time: ms {pub: in};
    r_1 = P1*mu_poc+P4*mu_pcc;
    r_2 = (alpha_p*mu_moc+alpha_m*mu_mcc)/(alpha_p+alpha_m);
    r_3 = beta_m*mu_pcc/(beta_m+beta_pcc);
    r_4 = mu_mcc;
    r_5 = P2*epsilon_pco+P4*epsilon_pcc;
    r_6 = epsilon_m;
    r_7 = alpha_m*epsilon_pcc/(alpha_p+alpha_m);
    r_8 = epsilon_m;
    z_4 = 1{dimensionless}-z_1-z_2-z_3;
    ode(z_1, time) = -(r_1+r_5)*z_1+r_2*z_2+r_6*z_3;
    ode(z_2, time) = r_1*z_1-(r_2+r_7)*z_2+r_8*z_4;
    ode(z_3, time) = r_5*z_1-(r_6+r_3)*z_3+r_4*z_4;
  enddef;

  def comp RyR_current as
    var P3: dimensionless {pub: in};
    var P2: dimensionless {pub: in};
    var P1: dimensionless {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var J_Roo: um3_mM_per_ms {pub: in};
    var J_Rco: um3_mM_per_ms {pub: in};
    var z_1: dimensionless {pub: in};
    var z_3: dimensionless {pub: in};
    var Vmyo: um3 {pub: in};
    var N: dimensionless {pub: in};
    var J_R1: um3_mM_per_ms {pub: out};
    var J_R3: um3_mM_per_ms {pub: out};
    var i_RyR1: mM_per_ms {pub: out};
    var i_RyR2: mM_per_ms {pub: out};
    J_R1 = P3*J_Roo+J_Rco*P2;
    J_R3 = J_Rco*beta_pcc/(beta_m+beta_pcc);
    i_RyR1 = (z_1*J_R1+z_3*J_R3)*N/Vmyo;
    i_RyR2 = i_RyR1;
  enddef;

  def comp LCC_current as
    var F: coulomb_per_mole {pub: in};
    var P3: dimensionless {pub: in};
    var P1: dimensionless {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var J_Loo: um3_mM_per_ms {pub: in};
    var J_Loc: um3_mM_per_ms {pub: in};
    var z_1: dimensionless {pub: in};
    var z_2: dimensionless {pub: in};
    var Vmyo: um3 {pub: in};
    var Vmyo_uL: uL {pub: in};
    var N: dimensionless {pub: in};
    var J_L1: um3_mM_per_ms {pub: out};
    var J_L2: um3_mM_per_ms {pub: out};
    var i_LCC1: mM_per_ms {pub: out};
    var i_LCC2: uA {pub: out};
    J_L1 = J_Loo*P3+J_Loc*P1;
    J_L2 = J_Loc*alpha_p/(alpha_p+alpha_m);
    i_LCC1 = (z_1*J_L1+z_2*J_L2)*N/Vmyo;
    i_LCC2 = -i_LCC1*2{dimensionless}*F*Vmyo_uL;
  enddef;

  def comp Na_Ca_Exchanger as
    var FVRT: dimensionless {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vmyo_uL: uL {pub: in, priv: out};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var eta: dimensionless {init: 0.35};
    var k_sat: dimensionless {init: 0.1};
    var g_NCX: mM_per_ms {init: 0.0515};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var i_Ncx1: mM_per_ms {pub: out};
    var i_Ncx2: uA {pub: out};
    i_Ncx1 = g_NCX*(exp(eta*FVRT)*pow(Na_i, 3{dimensionless})*Ca_o-exp((eta-1{dimensionless})*FVRT)*pow(Na_o, 3{dimensionless})*Ca_i)/((pow(Na_o, 3{dimensionless})+pow(K_mNa, 3{dimensionless}))*(Ca_o+K_mCa)*(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*FVRT)));
    i_Ncx2 = i_Ncx1*F*Vmyo_uL;
  enddef;

  def comp SERCA as
    var time: ms {pub: in};
    var CaMKb: dimensionless;
    var CaMKt: dimensionless {init: 0.820228418446148};
    var CaMKa: dimensionless;
    var on_rate: per_ms {init: 0.05};
    var off_rate: per_ms {init: 0.0002};
    var vmup: mM_per_ms;
    var Km_up: mM {init: 0.00045};
    var Ca_i: mM {pub: in};
    var i_SERCA: mM_per_ms {pub: out};
    CaMKb = 0.05{dimensionless}*(1{dimensionless}-CaMKt)*1{dimensionless}/(1{dimensionless}+0.0007{mM}/Ca_i);
    ode(CaMKt, time) = on_rate*CaMKb*(CaMKb+CaMKt)-off_rate*CaMKt;
    CaMKa = CaMKb+CaMKt;
    vmup = 0.001158{dimensionless}*CaMKa/(2.224{dimensionless}-CaMKa);
    i_SERCA = vmup*sqr(Ca_i)/(sqr(Km_up)+sqr(Ca_i));
  enddef;

  def comp SarcolemMal_Ca_pump as
    var F: coulomb_per_mole {pub: in};
    var Vmyo_uL: uL {pub: in, priv: out};
    var g_pCa: mM_per_ms {init: 5e-6};
    var K_mpCa: mM {init: 0.00035};
    var Ca_i: mM {pub: in};
    var i_pCa1: mM_per_ms {pub: out};
    var i_pCa2: uA {pub: out};
    i_pCa1 = g_pCa*Ca_i/(K_mpCa+Ca_i);
    i_pCa2 = i_pCa1*2{dimensionless}*F*Vmyo_uL;
  enddef;

  def comp Background_Ca_current as
    var V: mV {pub: in};
    var R: mJ_per_mole_K {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mole {pub: in};
    var Vmyo_uL: uL {pub: in, priv: out};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var E_Ca: mV {pub: out};
    var g_CaB: mM_per_mV_ms {init: 5.10875e-8};
    var i_CaB1: mM_per_ms {pub: out};
    var i_CaB2: uA {pub: out};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    i_CaB1 = g_CaB*(E_Ca-V);
    i_CaB2 = -i_CaB1*2{dimensionless}*F*Vmyo_uL;
  enddef;

  def comp SR_Ca_leak_current as
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var g_SRl: per_ms {init: 7.11e-6};
    var i_SR: mM_per_ms {pub: out};
    i_SR = g_SRl*(Ca_SR-Ca_i);
  enddef;

  def comp troponin_Ca_buffer as
    var k_m_TRPN: per_ms {init: 0.04};
    var k_p_TRPN: per_mM_ms {init: 40};
    var B_TRPN: mM {init: 0.07};
    var TRPN: mM {pub: in};
    var Ca_i: mM {pub: in};
    var i_TRPN: mM_per_ms {pub: out};
    i_TRPN = k_m_TRPN*(B_TRPN-TRPN)-k_p_TRPN*TRPN*Ca_i;
  enddef;

  def comp calmodulin_Ca_buffer as
    var k_CMDN: mM {init: 0.002382};
    var B_CMDN: mM {init: 0.05};
    var Ca_i: mM {pub: in};
    var beta_CMDN: dimensionless {pub: out};
    var EGTA_tot: mM {init: 0};
    var KmEGTA: mM {init: 0.00015};
    beta_CMDN = pow(1{dimensionless}+k_CMDN*B_CMDN/sqr(k_CMDN+Ca_i)+EGTA_tot*KmEGTA/sqr(KmEGTA+Ca_i), -1{dimensionless});
  enddef;

  def comp intracellular_ion_concentrations as
    var Na_i: mM {init: 13.6740982817237, pub: out};
    var Ca_i: mM {init: 0.000247148732859065, pub: out};
    var K_i: mM {init: 136.616455312563, pub: out};
    var Ca_SR: mM {init: 1.74941544642849, pub: out};
    var TRPN: mM {init: 0.0541640622725934, pub: out};
    var Vmyo_uL: uL {pub: in};
    var VSR_uL: uL {pub: in};
    var time: ms {pub: in};
    var F: C_per_mole {pub: in};
    var beta_CMDN: dimensionless {pub: in};
    var i_Na: uA {pub: in};
    var i_B_Na: uA {pub: in};
    var i_B_K: uA {pub: in};
    var i_f_Na: uA {pub: in};
    var i_f_K: uA {pub: in};
    var i_ss: uA {pub: in};
    var i_SERCA: mM_per_ms {pub: in};
    var i_pCa2: uA {pub: in};
    var i_CaB2: uA {pub: in};
    var i_TRPN: mM_per_ms {pub: in};
    var i_SR: mM_per_ms {pub: in};
    var i_Ncx2: uA {pub: in};
    var i_RyR2: mM_per_ms {pub: in};
    var i_LCC2: uA {pub: in};
    var i_Stim: uA {pub: in};
    var i_t: uA {pub: in};
    var i_K1: uA {pub: in};
    var i_NaK: uA {pub: in};
    ode(Na_i, time) = -(i_Na+i_B_Na+i_Ncx2*3{dimensionless}+i_NaK*3{dimensionless}+i_f_Na)*1{dimensionless}/(Vmyo_uL*F);
    ode(K_i, time) = -(i_Stim+i_ss+i_B_K+i_t+i_K1+i_f_K-2{dimensionless}*i_NaK)*1{dimensionless}/(Vmyo_uL*F);
    ode(TRPN, time) = i_TRPN;
    ode(Ca_i, time) = beta_CMDN*(i_RyR2-i_SERCA+i_SR+i_TRPN-(-2{dimensionless}*i_Ncx2+i_LCC2+i_pCa2+i_CaB2)/(2{dimensionless}*Vmyo_uL*F));
    ode(Ca_SR, time) = Vmyo_uL/VSR_uL*(-i_RyR2+i_SERCA-i_SR);
  enddef;

  def group as containment for
    comp membrane incl
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h_gate;
        comp sodium_current_j_gate;
      endcomp;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s_gate;
        comp Ca_independent_transient_outward_K_current_s_slow_gate;
      endcomp;
      comp steady_state_outward_K_current incl
        comp steady_state_outward_K_current_r_ss_gate;
        comp steady_state_outward_K_current_s_ss_gate;
      endcomp;
      comp inward_rectifier;
      comp hyperpolarisation_activated_current incl
        comp hyperpolarisation_activated_current_y_gate;
      endcomp;
      comp background_currents;
      comp sodium_potassium_pump;
      comp intracellular_ion_concentrations;
      comp extracellular_ion_concentrations;
      comp cell_geometry;
      comp CaRU incl
        comp CaRU_Transitions;
        comp CaRU_states;
        comp CaRU_reduced_states;
        comp DS_Calcium_Concentrations;
        comp LCC_and_RyR_fluxes;
        comp RyR_current;
        comp LCC_current;
      endcomp;
      comp Na_Ca_Exchanger;
      comp SERCA;
      comp SarcolemMal_Ca_pump;
      comp Background_Ca_current;
      comp SR_Ca_leak_current;
      comp troponin_Ca_buffer;
      comp calmodulin_Ca_buffer;
    endcomp;
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h_gate;
      comp sodium_current_j_gate;
    endcomp;
    comp Ca_independent_transient_outward_K_current incl
      comp Ca_independent_transient_outward_K_current_r_gate;
      comp Ca_independent_transient_outward_K_current_s_gate;
      comp Ca_independent_transient_outward_K_current_s_slow_gate;
    endcomp;
    comp steady_state_outward_K_current incl
      comp steady_state_outward_K_current_r_ss_gate;
      comp steady_state_outward_K_current_s_ss_gate;
    endcomp;
    comp hyperpolarisation_activated_current incl
      comp hyperpolarisation_activated_current_y_gate;
    endcomp;
    comp CaRU incl
      comp CaRU_Transitions;
      comp CaRU_states;
      comp CaRU_reduced_states;
      comp DS_Calcium_Concentrations;
      comp LCC_and_RyR_fluxes;
      comp RyR_current;
      comp LCC_current;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between steady_state_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between hyperpolarisation_activated_current and environment for
    vars time and time;
  enddef;
  def map between CaRU and environment for
    vars time and time;
  enddef;
  def map between SERCA and environment for
    vars time and time;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars i_Stim and i_Stim;
    vars F and F;
  enddef;
  def map between sodium_current and membrane for
    vars i_Na and i_Na;
    vars F and F;
    vars V and V;
    vars R and R;
    vars T and T;
  enddef;
  def map between Ca_independent_transient_outward_K_current and membrane for
    vars i_t and i_t;
    vars F and F;
    vars V and V;
    vars R and R;
    vars T and T;
  enddef;
  def map between steady_state_outward_K_current and membrane for
    vars i_ss and i_ss;
    vars V and V;
  enddef;
  def map between inward_rectifier and membrane for
    vars i_K1 and i_K1;
    vars F and F;
    vars V and V;
    vars R and R;
    vars T and T;
  enddef;
  def map between hyperpolarisation_activated_current and membrane for
    vars i_f and i_f;
    vars V and V;
  enddef;
  def map between background_currents and membrane for
    vars i_B_Na and i_B_Na;
    vars i_B_K and i_B_K;
    vars V and V;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars i_NaK and i_NaK;
    vars F and F;
    vars V and V;
    vars R and R;
    vars T and T;
  enddef;
  def map between CaRU and membrane for
    vars F and F;
    vars V and V;
    vars FVRT_Ca and FVRT_Ca;
    vars i_LCC2 and i_LCC2;
  enddef;
  def map between Na_Ca_Exchanger and membrane for
    vars F and F;
    vars FVRT and FVRT;
    vars i_Ncx2 and i_Ncx2;
  enddef;
  def map between SarcolemMal_Ca_pump and membrane for
    vars F and F;
    vars i_pCa2 and i_pCa2;
  enddef;
  def map between Background_Ca_current and membrane for
    vars F and F;
    vars T and T;
    vars R and R;
    vars V and V;
    vars i_CaB2 and i_CaB2;
  enddef;
  def map between sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars i_t and i_t;
    vars K_i and K_i;
  enddef;
  def map between steady_state_outward_K_current and intracellular_ion_concentrations for
    vars i_ss and i_ss;
  enddef;
  def map between inward_rectifier and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
    vars K_i and K_i;
  enddef;
  def map between hyperpolarisation_activated_current and intracellular_ion_concentrations for
    vars i_f_Na and i_f_Na;
    vars i_f_K and i_f_K;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars i_B_Na and i_B_Na;
    vars i_B_K and i_B_K;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_current and extracellular_ion_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between Ca_independent_transient_outward_K_current and extracellular_ion_concentrations for
    vars K_o and K_o;
  enddef;
  def map between inward_rectifier and extracellular_ion_concentrations for
    vars K_o and K_o;
  enddef;
  def map between sodium_potassium_pump and extracellular_ion_concentrations for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between Ca_independent_transient_outward_K_current and steady_state_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and hyperpolarisation_activated_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and hyperpolarisation_activated_current for
    vars E_Na and E_Na;
  enddef;
  def map between cell_geometry and intracellular_ion_concentrations for
    vars Vmyo_uL and Vmyo_uL;
    vars VSR_uL and VSR_uL;
  enddef;
  def map between cell_geometry and Na_Ca_Exchanger for
    vars Vmyo_uL and Vmyo_uL;
  enddef;
  def map between cell_geometry and SarcolemMal_Ca_pump for
    vars Vmyo_uL and Vmyo_uL;
  enddef;
  def map between cell_geometry and Background_Ca_current for
    vars Vmyo_uL and Vmyo_uL;
  enddef;
  def map between cell_geometry and CaRU for
    vars Vmyo and Vmyo;
    vars Vmyo_uL and Vmyo_uL;
  enddef;
  def map between intracellular_ion_concentrations and calmodulin_Ca_buffer for
    vars Ca_i and Ca_i;
    vars beta_CMDN and beta_CMDN;
  enddef;
  def map between intracellular_ion_concentrations and CaRU for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars i_RyR2 and i_RyR2;
    vars i_LCC2 and i_LCC2;
  enddef;
  def map between intracellular_ion_concentrations and Na_Ca_Exchanger for
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars i_Ncx2 and i_Ncx2;
  enddef;
  def map between intracellular_ion_concentrations and SERCA for
    vars Ca_i and Ca_i;
    vars i_SERCA and i_SERCA;
  enddef;
  def map between intracellular_ion_concentrations and SarcolemMal_Ca_pump for
    vars Ca_i and Ca_i;
    vars i_pCa2 and i_pCa2;
  enddef;
  def map between intracellular_ion_concentrations and Background_Ca_current for
    vars Ca_i and Ca_i;
    vars i_CaB2 and i_CaB2;
  enddef;
  def map between intracellular_ion_concentrations and SR_Ca_leak_current for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars i_SR and i_SR;
  enddef;
  def map between intracellular_ion_concentrations and troponin_Ca_buffer for
    vars Ca_i and Ca_i;
    vars TRPN and TRPN;
    vars i_TRPN and i_TRPN;
  enddef;
  def map between CaRU and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between Na_Ca_Exchanger and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between Background_Ca_current and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_slow_gate for
    vars s_slow and s_slow;
    vars time and time;
    vars V and V;
  enddef;
  def map between steady_state_outward_K_current and steady_state_outward_K_current_r_ss_gate for
    vars r_ss and r_ss;
    vars time and time;
    vars V and V;
  enddef;
  def map between steady_state_outward_K_current and steady_state_outward_K_current_s_ss_gate for
    vars s_ss and s_ss;
    vars time and time;
    vars V and V;
  enddef;
  def map between hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between CaRU and CaRU_reduced_states for
    vars time and time;
  enddef;
  def map between CaRU and LCC_and_RyR_fluxes for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars Ca_o and Ca_o;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between CaRU and CaRU_Transitions for
    vars V and V;
    vars Ca_i and Ca_i;
  enddef;
  def map between CaRU_Transitions and CaRU_states for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
    vars beta_pcc and beta_pcc;
    vars beta_poc and beta_poc;
    vars beta_m and beta_m;
  enddef;
  def map between CaRU_Transitions and RyR_current for
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
  enddef;
  def map between CaRU_Transitions and LCC_current for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
  enddef;
  def map between CaRU_states and RyR_current for
    vars P3 and P3;
    vars P2 and P2;
    vars P1 and P1;
  enddef;
  def map between CaRU_states and LCC_current for
    vars P3 and P3;
    vars P1 and P1;
  enddef;
  def map between LCC_and_RyR_fluxes and RyR_current for
    vars J_Roo and J_Roo;
    vars J_Rco and J_Rco;
  enddef;
  def map between LCC_and_RyR_fluxes and LCC_current for
    vars J_Loo and J_Loo;
    vars J_Loc and J_Loc;
  enddef;
  def map between CaRU_reduced_states and RyR_current for
    vars z_1 and z_1;
    vars z_3 and z_3;
  enddef;
  def map between CaRU_reduced_states and LCC_current for
    vars z_1 and z_1;
    vars z_2 and z_2;
  enddef;
  def map between DS_Calcium_Concentrations and CaRU_Transitions for
    vars C_oc and C_oc;
    vars C_co and C_co;
  enddef;
  def map between CaRU_Transitions and CaRU_reduced_states for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
    vars epsilon_pco and epsilon_pco;
    vars epsilon_pcc and epsilon_pcc;
    vars epsilon_m and epsilon_m;
    vars mu_poc and mu_poc;
    vars mu_pcc and mu_pcc;
    vars mu_moc and mu_moc;
    vars mu_mcc and mu_mcc;
  enddef;
  def map between CaRU_states and CaRU_reduced_states for
    vars P1 and P1;
    vars P4 and P4;
    vars P2 and P2;
  enddef;
  def map between CaRU and DS_Calcium_Concentrations for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
    vars Ca_SR and Ca_SR;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between CaRU and RyR_current for
    vars N and N;
    vars Vmyo and Vmyo;
    vars i_RyR2 and i_RyR2;
  enddef;
  def map between CaRU and LCC_current for
    vars i_LCC2 and i_LCC2;
    vars Vmyo and Vmyo;
    vars Vmyo_uL and Vmyo_uL;
    vars N and N;
    vars F and F;
  enddef;
enddef;
