// This CellML file was generated on 06/11/2007 at 17:08:44 using:
//
// COR (0.9.31.807)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
def model luo_rudy_1991 as
  // Luo-Rudy Mammalian Ventricular Model I 1991
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model has been curated and unit checked and is known to replicate the published results in OpenCell and COR.
  //
  // Model Structure
  //
  // In 1991, Ching-hsing Luo and Yoram Rudy published a mathematical model of the ventricular cardiac action potential. This original model is the first of the two Luo-Rudy models, and it has subsequently come to be known as the Luo-Rudy I model. It is a significant update of the Beeler-Reuter mammalian ventricular model (1977) (see the figure below), and like the the Beeler-Reuter model, the Luo-Rudy I model uses Hodgkin-Huxley type equations to calculate ionic currents.
  //
  // The complete original paper reference is cited below:
  //
  // A Model of the Ventricular Cardiac Action Potential - Depolarisation, Repolarisation and Their Interaction, Ching-hsing Luo and Yoram Rudy, 1991 Circulation Research, 68, 1501-1526. PubMed ID: 1709839 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=1709839&dopt=Abstract)
  //
  // cell diagram of the LR-I model showing ionic currents, pumps and exchangers within the sarcolemma
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the LR-I model.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit per_1000_centimetre as
    unit metre {expo: -1, mult: 1000, pref: -2};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microA_per_cm2 as
    unit ampere {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0042391
  // isVersionOf: http://identifiers.org/go/GO:0060075
  def comp membrane as
    // isVersionOf: http://identifiers.org/go/GO:0030322
    // isVersionOf: http://identifiers.org/go/GO:0042391
    // isVersionOf: http://identifiers.org/go/GO:0060075
    var V: millivolt {init: -84.3801107371, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96484.6, pub: out};
    var C: microF_per_cm2 {init: 1};
    var I_stim: microA_per_cm2;
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Na: microA_per_cm2 {pub: in};
    var i_si: microA_per_cm2 {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_K: microA_per_cm2 {pub: in};
    var i_K1: microA_per_cm2 {pub: in};
    var i_Kp: microA_per_cm2 {pub: in};
    var i_b: microA_per_cm2 {pub: in};
    var stim_start: millisecond {init: 100};
    var stim_end: millisecond {init: 9000};
    var stim_period: millisecond {init: 1000};
    var stim_duration: millisecond {init: 2};
    var stim_amplitude: microA_per_cm2 {init: -25.5};
    I_stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{microA_per_cm2};
    endsel;
    ode(V, time) = -1{dimensionless}/C*(I_stim+i_Na+i_si+i_K+i_K1+i_Kp+i_b);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Na: microA_per_cm2 {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var g_Na: milliS_per_cm2 {init: 23};
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var E_Na: millivolt;
    var time: millisecond {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: millimolar {pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    E_Na = R*T/F*ln(Nao/Nai);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0090072
  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.00171338077730188, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11{millivolt});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.982660523699656, pub: out};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_millisecond}*exp((80{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_millisecond}*exp(0.079{per_millivolt}*V)+310000{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1{dimensionless}/(0.13{millisecond}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 0.989108212766685, pub: out};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        (-127140{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)-0.00003474{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-0.0000002535{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    ode(j, time) = alpha_j*(1{dimensionless}-j)-beta_j*j;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  def comp slow_inward_current as
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_si: microA_per_cm2 {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var E_si: millivolt;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cai: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    E_si = 7.7{millivolt}-13.0287{millivolt}*ln(Cai/1{millimolar});
    i_si = 0.09{milliS_per_cm2}*d*f*(V-E_si);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  def comp slow_inward_current_d_gate as
    var d: dimensionless {init: 0.00302126301779861, pub: out};
    var alpha_d: per_millisecond;
    var beta_d: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_d = 0.095{per_millisecond}*exp(-0.01{per_millivolt}*(V-5{millivolt}))/(1{dimensionless}+exp(-0.072{per_millivolt}*(V-5{millivolt})));
    beta_d = 0.07{per_millisecond}*exp(-0.017{per_millivolt}*(V+44{millivolt}))/(1{dimensionless}+exp(0.05{per_millivolt}*(V+44{millivolt})));
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  def comp slow_inward_current_f_gate as
    var f: dimensionless {init: 0.999967936476325, pub: out};
    var alpha_f: per_millisecond;
    var beta_f: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_f = 0.012{per_millisecond}*exp(-0.008{per_millivolt}*(V+28{millivolt}))/(1{dimensionless}+exp(0.15{per_millivolt}*(V+28{millivolt})));
    beta_f = 0.0065{per_millisecond}*exp(-0.02{per_millivolt}*(V+30{millivolt}))/(1{dimensionless}+exp(-0.2{per_millivolt}*(V+30{millivolt})));
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp time_dependent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_K: microA_per_cm2 {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var g_K: milliS_per_cm2;
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var E_K: millivolt;
    var PR_NaK: dimensionless {init: 0.01833};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ko: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ki: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: millimolar {pub: in};
    var X: dimensionless {priv: in};
    var Xi: dimensionless {priv: in};
    g_K = 0.282{milliS_per_cm2}*sqrt(Ko/5.4{millimolar});
    E_K = R*T/F*ln((Ko+PR_NaK*Nao)/(Ki+PR_NaK*Nai));
    i_K = g_K*X*Xi*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp time_dependent_potassium_current_X_gate as
    var X: dimensionless {init: 0.0417603108167287, pub: out};
    var alpha_X: per_millisecond;
    var beta_X: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_X = 0.0005{per_millisecond}*exp(0.083{per_millivolt}*(V+50{millivolt}))/(1{dimensionless}+exp(0.057{per_millivolt}*(V+50{millivolt})));
    beta_X = 0.0013{per_millisecond}*exp(-0.06{per_millivolt}*(V+20{millivolt}))/(1{dimensionless}+exp(-0.04{per_millivolt}*(V+20{millivolt})));
    ode(X, time) = alpha_X*(1{dimensionless}-X)-beta_X*X;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp time_dependent_potassium_current_Xi_gate as
    var Xi: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    Xi = sel
      case V > -100{millivolt}:
        2.837{millivolt}*(exp(0.04{per_millivolt}*(V+77{millivolt}))-1{dimensionless})/((V+77{millivolt})*exp(0.04{per_millivolt}*(V+35{millivolt})));
      otherwise:
        1{dimensionless};
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0022841
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp time_independent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0055075
    var i_K1: microA_per_cm2 {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0055075
    var E_K1: millivolt {priv: out, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0055075
    var g_K1: milliS_per_cm2;
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var K1_infinity: dimensionless {priv: in};
    g_K1 = 0.6047{milliS_per_cm2}*sqrt(Ko/5.4{millimolar});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0022841
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_millisecond;
    var beta_K1: per_millisecond;
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0055075
    var E_K1: millivolt {pub: in};
    alpha_K1 = 1.02{per_millisecond}/(1{dimensionless}+exp(0.2385{per_millivolt}*(V-E_K1-59.215{millivolt})));
    beta_K1 = (0.49124{per_millisecond}*exp(0.08032{per_millivolt}*(V+5.476{millivolt}-E_K1))+1{per_millisecond}*exp(0.06175{per_millivolt}*(V-(E_K1+594.31{millivolt}))))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(V-E_K1+4.753{millivolt})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp plateau_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_Kp: microA_per_cm2 {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var E_Kp: millivolt;
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var g_Kp: milliS_per_cm2 {init: 0.0183};
    var Kp: dimensionless;
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0055075
    var E_K1: millivolt {pub: in};
    E_Kp = E_K1;
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp background_current as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_b: microA_per_cm2 {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var E_b: millivolt {init: -59.87};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_b: milliS_per_cm2 {init: 0.03921};
    var V: millivolt {pub: in};
    i_b = g_b*(V-E_b);
  enddef;

  def comp ionic_concentrations as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: millimolar {init: 140, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: millimolar {init: 18, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ki: millimolar {init: 145, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ko: millimolar {init: 5.4, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  // isVersionOf: http://identifiers.org/go/GO:0051480
  def comp intracellular_calcium_concentration as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    // isVersionOf: http://identifiers.org/go/GO:0051480
    var Cai: millimolar {init: 0.00017948816388306, pub: out};
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_si: microA_per_cm2 {pub: in};
    ode(Cai, time) = -0.0001{per_1000_centimetre}/1{coulomb_per_mole}*i_si+0.07{per_millisecond}*(0.0001{millimolar}-Cai);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp slow_inward_current incl
        comp slow_inward_current_d_gate;
        comp slow_inward_current_f_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_X_gate;
        comp time_dependent_potassium_current_Xi_gate;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp plateau_potassium_current;
      comp background_current;
      comp ionic_concentrations;
      comp intracellular_calcium_concentration;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp slow_inward_current incl
      comp slow_inward_current_d_gate;
      comp slow_inward_current_f_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_X_gate;
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between slow_inward_current and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and slow_inward_current for
    vars V and V;
    vars i_si and i_si;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and background_current for
    vars V and V;
    vars i_b and i_b;
  enddef;
  def map between slow_inward_current and intracellular_calcium_concentration for
    vars i_si and i_si;
    vars Cai and Cai;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between time_dependent_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars Ki and Ki;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between time_independent_potassium_current and plateau_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_inward_current and slow_inward_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_inward_current and slow_inward_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars V and V;
    vars E_K1 and E_K1;
  enddef;
enddef;
