<?xml version='1.0'?>
<model name="StateDiagram" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="state">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="RT" public_interface="in" units="J_per_mol"/>
        <!-- Parameters-->
        <variable name="K_q1" public_interface="in" units="per_mol"/>
        <variable name="K_q2" public_interface="in" units="per_mol"/>
        <variable name="K_q3" public_interface="in" units="per_mol"/>
        <variable name="K_q4" public_interface="in" units="per_mol"/>
        <variable name="K_q5" public_interface="in" units="per_mol"/>
        <variable name="K_q6" public_interface="in" units="per_mol"/>
        <variable name="K_q7" public_interface="in" units="per_mol"/>
        <variable name="K_q8" public_interface="in" units="per_mol"/>
        <variable name="K_q9" public_interface="in" units="per_mol"/>
        <variable name="K_q10" public_interface="in" units="per_mol"/>
        <variable name="K_Re1" public_interface="in" units="mol_per_s"/>
        <variable name="K_Re2" public_interface="in" units="mol_per_s"/>
        <variable name="K_Re3" public_interface="in" units="mol_per_s"/>
        <variable name="K_Re4" public_interface="in" units="mol_per_s"/>
        <variable name="K_Re5" public_interface="in" units="mol_per_s"/>
        <variable name="K_Re6" public_interface="in" units="mol_per_s"/>
        <!-- State variables-->
        <variable name="q1_init" public_interface="in" units="mole"/>
        <variable name="q2_init" public_interface="in" units="mole"/>
        <variable name="q3_init" public_interface="in" units="mole"/>
        <variable name="q4_init" public_interface="in" units="mole"/>
        <variable name="q5_init" public_interface="in" units="mole"/>
        <variable name="q6_init" public_interface="in" units="mole"/>
        <variable name="q7_init" public_interface="in" units="mole"/>
        <variable name="q8_init" public_interface="in" units="mole"/>
        <variable name="q9_init" public_interface="in" units="mole"/>
        <variable name="q10_init" public_interface="in" units="mole"/>
        <variable initial_value="0.0" name="q1_aux" units="mole"/>
        <variable initial_value="0.0" name="q2_aux" units="mole"/>
        <variable initial_value="0.0" name="q3_aux" units="mole"/>
        <variable initial_value="0.0" name="q4_aux" units="mole"/>
        <variable initial_value="0.0" name="q5_aux" units="mole"/>
        <variable initial_value="0.0" name="q6_aux" units="mole"/>
        <variable initial_value="0.0" name="q7_aux" units="mole"/>
        <variable initial_value="0.0" name="q8_aux" units="mole"/>
        <variable initial_value="0.0" name="q9_aux" units="mole"/>
        <variable initial_value="0.0" name="q10_aux" units="mole"/>
        <variable name="q1" public_interface="out" units="mole"/>
        <variable name="q2" public_interface="out" units="mole"/>
        <variable name="q3" public_interface="out" units="mole"/>
        <variable name="q4" public_interface="out" units="mole"/>
        <variable name="q5" public_interface="out" units="mole"/>
        <variable name="q6" public_interface="out" units="mole"/>
        <variable name="q7" public_interface="out" units="mole"/>
        <variable name="q8" public_interface="out" units="mole"/>
        <variable name="q9" public_interface="out" units="mole"/>
        <variable name="q10" public_interface="out" units="mole"/>
        <variable name="v_Re1" public_interface="out" units="mol_per_s"/>
        <variable name="v_Re2" public_interface="out" units="mol_per_s"/>
        <variable name="v_Re3" public_interface="out" units="mol_per_s"/>
        <variable name="v_Re4" public_interface="out" units="mol_per_s"/>
        <variable name="v_Re5" public_interface="out" units="mol_per_s"/>
        <variable name="v_Re6" public_interface="out" units="mol_per_s"/>
        <variable name="u1" public_interface="out" units="J_per_mol"/>
        <variable name="u2" public_interface="out" units="J_per_mol"/>
        <variable name="u3" public_interface="out" units="J_per_mol"/>
        <variable name="u4" public_interface="out" units="J_per_mol"/>
        <variable name="u5" public_interface="out" units="J_per_mol"/>
        <variable name="u6" public_interface="out" units="J_per_mol"/>
        <variable name="u7" public_interface="out" units="J_per_mol"/>
        <variable name="u8" public_interface="out" units="J_per_mol"/>
        <variable name="u9" public_interface="out" units="J_per_mol"/>
        <variable name="u10" public_interface="out" units="J_per_mol"/>
        <variable name="u11" public_interface="out" units="J_per_mol"/>
        <variable name="u12" public_interface="out" units="J_per_mol"/>
        <variable name="u13" public_interface="out" units="J_per_mol"/>
        <variable name="u14" public_interface="out" units="J_per_mol"/>
        <!-- Conservation laws-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q1_aux</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_Re1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q2_aux</ci>
                </apply>
                <ci>v_Re3</ci>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q3_aux</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_Re4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q4_aux</ci>
                </apply>
                <ci>v_Re6</ci>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q5_aux</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_Re6</ci>
                    <ci>v_Re1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q6_aux</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_Re1</ci>
                    <ci>v_Re2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q7_aux</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_Re2</ci>
                    <ci>v_Re3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q8_aux</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_Re3</ci>
                    <ci>v_Re4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q9_aux</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_Re4</ci>
                    <ci>v_Re5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q10_aux</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_Re5</ci>
                    <ci>v_Re6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q1</ci>
                <apply>
                    <plus/>
                    <ci>q1_aux</ci>
                    <ci>q1_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q2</ci>
                <apply>
                    <plus/>
                    <ci>q2_aux</ci>
                    <ci>q2_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q3</ci>
                <apply>
                    <plus/>
                    <ci>q3_aux</ci>
                    <ci>q3_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q4</ci>
                <apply>
                    <plus/>
                    <ci>q4_aux</ci>
                    <ci>q4_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q5</ci>
                <apply>
                    <plus/>
                    <ci>q5_aux</ci>
                    <ci>q5_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q6</ci>
                <apply>
                    <plus/>
                    <ci>q6_aux</ci>
                    <ci>q6_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q7</ci>
                <apply>
                    <plus/>
                    <ci>q7_aux</ci>
                    <ci>q7_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q8</ci>
                <apply>
                    <plus/>
                    <ci>q8_aux</ci>
                    <ci>q8_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q9</ci>
                <apply>
                    <plus/>
                    <ci>q9_aux</ci>
                    <ci>q9_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q10</ci>
                <apply>
                    <plus/>
                    <ci>q10_aux</ci>
                    <ci>q10_init</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u11</ci>
                <apply>
                    <plus/>
                    <ci>u5</ci>
                    <ci>u1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u12</ci>
                <apply>
                    <plus/>
                    <ci>u2</ci>
                    <ci>u8</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u13</ci>
                <apply>
                    <plus/>
                    <ci>u8</ci>
                    <ci>u3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u14</ci>
                <apply>
                    <plus/>
                    <ci>u4</ci>
                    <ci>u5</ci>
                </apply>
            </apply>
            <!-- Constitutive relations-->
            <apply>
                <eq/>
                <ci>u1</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q1</ci>
                            <ci>q1</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u2</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q2</ci>
                            <ci>q2</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u3</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q3</ci>
                            <ci>q3</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u4</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q4</ci>
                            <ci>q4</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u5</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q5</ci>
                            <ci>q5</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u6</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q6</ci>
                            <ci>q6</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u7</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q7</ci>
                            <ci>q7</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u8</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q8</ci>
                            <ci>q8</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u9</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q9</ci>
                            <ci>q9</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u10</ci>
                <apply>
                    <times/>
                    <ci>RT</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <times/>
                            <ci>K_q10</ci>
                            <ci>q10</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_Re1</ci>
                <apply>
                    <times/>
                    <ci>K_Re1</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u11</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u6</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_Re2</ci>
                <apply>
                    <times/>
                    <ci>K_Re2</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u6</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u7</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_Re3</ci>
                <apply>
                    <times/>
                    <ci>K_Re3</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u7</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u12</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_Re4</ci>
                <apply>
                    <times/>
                    <ci>K_Re4</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u13</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u9</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_Re5</ci>
                <apply>
                    <times/>
                    <ci>K_Re5</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u9</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u10</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_Re6</ci>
                <apply>
                    <times/>
                    <ci>K_Re6</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u10</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u14</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
