<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 9/04/2010 at 12:39:33 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" name="lemaire_model_2004" cmeta:id="lemaire_model_2004" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Modeling the interactions between osteoblast and osteoclast activities in bone remodeling</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
           This CellML model represents an extension of the core model such that the receptor activator of NF-kB ligand (RANKL) is being added at a constant rate from day 20 and osteoprotegerin (OPG) is subsequently added 60 days later, also at a constant rate. The model runs in both OpenCell and COR to recreate the published results.  The units are consistent throughout.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: We propose a mathematical model explaining the interactions between osteoblasts and osteoclasts, two cell types specialized in the maintenance of the bone integrity. Bone is a dynamic, living tissue whose structure and shape continuously evolves during life. It has the ability to change architecture by removal of old bone and replacement with newly formed bone in a localized process called remodeling. The model described here is based on the idea that the relative proportions of immature and mature osteoblasts control the degree of osteoclastic activity. In addition, osteoclasts control osteoblasts differentially depending on their stage of differentiation. Despite the tremendous complexity of the bone regulatory system and its fragmentary understanding, we obtain surprisingly good correlations between the model simulations and the experimental observations extracted from the literature. The model results corroborate all behaviors of the bone remodeling system that we have simulated, including the tight coupling between osteoblasts and osteoclasts, the catabolic effect induced by continuous administration of PTH, the catabolic action of RANKL, as well as its reversal by soluble antagonist OPG. The model is also able to simulate metabolic bone diseases such as estrogen deficiency, vitamin D deficiency, senescence and glucocorticoid excess. Conversely, possible routes for therapeutic interventions are tested and evaluated. Our model confirms that anti-resorptive therapies are unable to partially restore bone loss, whereas bone formation therapies yield better results. The model enables us to determine and evaluate potential therapies based on their efficacy. In particular, the model predicts that combinations of anti-resorptive and anabolic therapies provide significant benefits compared with monotherapy, especially for certain type of skeletal disease. Finally, the model clearly indicates that increasing the size of the pool of preosteoblasts is an essential ingredient for the therapeutic manipulation of bone formation. This model was conceived as the first step in a bone turnover modeling platform. These initial modeling results are extremely encouraging and lead us to proceed with additional explorations into bone turnover and skeletal remodeling.
</para>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>model diagram</title>
							</objectinfo>
							<imagedata fileref="lemaire_2004_new.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the basic structure of the model.</caption>
				</informalfigure>
				<para>
The original paper reference is cited below:
</para>
				<para>
Modeling the interactions between osteoblast and osteoclast activities in bone remodeling, Vincent Lemaire, Frank L. Tobin, Larry D. Greller, Carolyn R. Cho, and Larry J. Suva, 2004, <emphasis>Journal of Theoretical Biology</emphasis>, 229, 293-309.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/15234198">PubMed ID: 15234198</ulink>
				</para>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Description rdf:about="#R">
			<dc:title>R</dc:title>
			<dcterms:alternative>responding osteoblasts</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#B">
			<dc:title>B</dc:title>
			<dcterms:alternative>active osteoblasts</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#C">
			<dc:title>C</dc:title>
			<dcterms:alternative>active osteoclasts</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Bag rdf:about="rdf:#410c2651-d2a9-42d4-9a3d-002c2697cbc3">
			<rdf:li>osteoblast</rdf:li>
			<rdf:li>osteoclast</rdf:li>
			<rdf:li>osteoporosis</rdf:li>
			<rdf:li>parathyroid hormone</rdf:li>
		</rdf:Bag>
		<rdf:Description rdf:about="rdf:#410c2651-d2a9-42d4-9a3d-002c2697cbc3"/>
		<rdf:Seq rdf:about="rdf:#f3ab344a-2835-439f-913f-e5f3a757435d">
			<rdf:li rdf:resource="rdf:#e5ca7a8b-88ca-4f5a-a596-dba84cfd6e48"/>
			<rdf:li rdf:resource="rdf:#44d3a5f4-6b1c-4929-9f6e-71fa58e092d7"/>
			<rdf:li rdf:resource="rdf:#2d92fb0f-f436-4aeb-9d7f-33c988c16989"/>
			<rdf:li rdf:resource="rdf:#4f72703f-011f-4058-89c0-571a0974e586"/>
			<rdf:li rdf:resource="rdf:#41345624-7ce3-4185-af4c-8ef6dbacc14a"/>
		</rdf:Seq>
		<rdf:Description rdf:about="rdf:#$2QVap">
			<ns7:endingValue>140</ns7:endingValue>
			<ns7:nonstandard-pointDensity>10000</ns7:nonstandard-pointDensity>
			<ns7:maximumStepSize>0.1</ns7:maximumStepSize>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#$1QVap">
			<rdf:rest rdf:resource="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
			<rdf:first rdf:resource="rdf:#$2QVap"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a7ecf535-c8ff-4dc0-8352-0f1ba16b1af8">
			<dc:title>Journal of Theoretical Biology</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#6b2dad2e-6a0e-4b21-ae9e-d9cd21e89831">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3ab1a0c1-2827-4fa8-9037-f97378246d86">
			<dc:creator rdf:resource="rdf:#f3ab344a-2835-439f-913f-e5f3a757435d"/>
			<dc:title>Modeling the interactions between osteoblast and osteoclast activities in bone remodeling</dc:title>
			<bqs:volume>229</bqs:volume>
			<bqs:first_page>293</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#a7ecf535-c8ff-4dc0-8352-0f1ba16b1af8"/>
			<dcterms:issued rdf:resource="rdf:#b4918f2a-e677-4812-a2da-4080d46d82ee"/>
			<bqs:last_page>309</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#096e2ed6-9da3-4afe-b47f-3b49325934e5">
			<dc:creator rdf:resource="rdf:#b894fe76-8308-44e9-89be-3f1d300a5c28"/>
			<rdf:value>This is a CellML description of Lemaire et al's 2004 mathematical model of the interactions between osteoblast and osteoclast activities in bone remodelling.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#bf08ef60-6439-47eb-964b-2cd30ac819fe">
			<vCard:N rdf:resource="rdf:#4b0637f4-aab9-44e2-9b61-266d7208be12"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4f72703f-011f-4058-89c0-571a0974e586">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#2ad31d7c-c23d-4f7c-b13f-63549bf3aeed"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#061674e3-4b4a-40f2-9da0-ac3453d8103c">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value rdf:resource="rdf:#410c2651-d2a9-42d4-9a3d-002c2697cbc3"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#37e0204d-acff-4ba1-adab-6b731f284c2f">
			<dcterms:modified rdf:resource="rdf:#8156eb05-7f32-41a9-a2b0-b6ddbfbf7321"/>
			<rdf:value>deleted extraneous connection

added simulation metadata

added some cmeta:id's</rdf:value>
			<cmeta:modifier xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#bf08ef60-6439-47eb-964b-2cd30ac819fe"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4b0637f4-aab9-44e2-9b61-266d7208be12">
			<vCard:Given>James</vCard:Given>
			<vCard:Family>Lawson</vCard:Family>
			<vCard:Other>Richard</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e5ca7a8b-88ca-4f5a-a596-dba84cfd6e48">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#dd54ace9-a479-49c5-9e2b-52276658a1f8"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b894fe76-8308-44e9-89be-3f1d300a5c28">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#48dcc157-6dde-463a-869e-024299a1c838">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#dd54ace9-a479-49c5-9e2b-52276658a1f8">
			<vCard:Given>Vincent</vCard:Given>
			<vCard:Family>Lemaire</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#fa986d6c-a56a-4056-b73d-d268dff54e0e">
			<vCard:FN/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#44d3a5f4-6b1c-4929-9f6e-71fa58e092d7">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#ba4e2c9e-80be-420d-9ba9-ca88fc822f53"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7dd72f18-7390-496c-a826-d50fafd09250">
			<vCard:Given>Larry</vCard:Given>
			<vCard:Family>Greller</vCard:Family>
			<vCard:Other>D</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:title>
			Main Model + Adding RANKL and Osteoprotegerin
			</dc:title>
			<dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#66fdbc77-d276-4319-b7ed-74429f171284"/>
			<dcterms:created rdf:resource="rdf:#eff185bc-9e50-4997-a885-b6fcf70778a1"/>
			<dc:creator rdf:resource="rdf:#f7e999e7-096a-4527-9a1a-ed66bc3467ec"/>
			<cmeta:modification xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#37e0204d-acff-4ba1-adab-6b731f284c2f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#074a8e21-7b7c-4a9a-82d3-419a1e101c55">
			<vCard:Given>Larry</vCard:Given>
			<vCard:Family>Suva</vCard:Family>
			<vCard:Other>J</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ba4e2c9e-80be-420d-9ba9-ca88fc822f53">
			<vCard:Given>Frank</vCard:Given>
			<vCard:Family>Tobin</vCard:Family>
			<vCard:Other>L</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#2d92fb0f-f436-4aeb-9d7f-33c988c16989">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#7dd72f18-7390-496c-a826-d50fafd09250"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b4918f2a-e677-4812-a2da-4080d46d82ee">
			<dcterms:W3CDTF>2004-08-07</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="#lemaire_model_2004">
			<ns7:simulation rdf:resource="rdf:#$0QVap"/>
			<dc:title>Lemaire et al's 2004 mathematical model of the interactions between osteoblast and osteoclast activities in bone remodelling.</dc:title>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#096e2ed6-9da3-4afe-b47f-3b49325934e5"/>
			<bqs:reference rdf:resource="rdf:#59939b09-a38c-4c23-b768-44a06ce03c03"/>
			<bqs:reference rdf:resource="rdf:#aca18711-ad9c-4587-bd13-6e096924e701"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#41345624-7ce3-4185-af4c-8ef6dbacc14a">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#074a8e21-7b7c-4a9a-82d3-419a1e101c55"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f7e999e7-096a-4527-9a1a-ed66bc3467ec">
			<vCard:ORG rdf:resource="rdf:#48dcc157-6dde-463a-869e-024299a1c838"/>
			<vCard:EMAIL rdf:resource="rdf:#6b2dad2e-6a0e-4b21-ae9e-d9cd21e89831"/>
			<vCard:N rdf:resource="rdf:#959d3206-6ef0-4fe1-b19c-5fe5a79c77f4"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#eff185bc-9e50-4997-a885-b6fcf70778a1">
			<dcterms:W3CDTF>2007-07-26T00:00:00+00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#959d3206-6ef0-4fe1-b19c-5fe5a79c77f4">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#aca18711-ad9c-4587-bd13-6e096924e701">
			<dc:subject rdf:resource="rdf:#061674e3-4b4a-40f2-9da0-ac3453d8103c"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#8156eb05-7f32-41a9-a2b0-b6ddbfbf7321">
			<dcterms:W3CDTF>2008-09-15T13:11:10+12:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#2ad31d7c-c23d-4f7c-b13f-63549bf3aeed">
			<vCard:Given>Carolyn</vCard:Given>
			<vCard:Family>Cho</vCard:Family>
			<vCard:Other>R</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#66fdbc77-d276-4319-b7ed-74429f171284">
			<dc:creator rdf:resource="rdf:#fa986d6c-a56a-4056-b73d-d268dff54e0e"/>
			<rdf:value/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#$0QVap">
			<ns7:boundIntervals rdf:resource="rdf:#$1QVap"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#59939b09-a38c-4c23-b768-44a06ce03c03">
			<bqs:Pubmed_id>15234198</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#3ab1a0c1-2827-4fa8-9037-f97378246d86"/>
		</rdf:Description>
	</rdf:RDF>   <units xmlns="http://www.cellml.org/cellml/1.0#" name="day">
      <unit units="second" multiplier="86400"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picomole">
      <unit units="mole" prefix="pico"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="cells" base_units="yes"/>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picomole_cells">
      <unit units="picomole"/>
      <unit units="cells"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picomole_picomole_cells">
      <unit units="picomole"/>
      <unit units="picomole_cells" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picomole_day_picomole_cells">
      <unit units="picomole"/>
      <unit units="day" exponent="-1"/>
      <unit units="picomole_cells" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picomolar">
      <unit units="mole" prefix="pico"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="flux">
      <unit units="picomolar"/>
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="first_order_rate_constant">
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="second_order_rate_constant">
      <unit units="picomolar" exponent="-1"/>
      <unit units="day" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="day" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="R">
      <variable name="R" units="picomolar" initial_value="0" public_interface="out"/>
      <variable name="DR" units="flux" public_interface="in"/>
      <variable name="pi_C" units="dimensionless" public_interface="in"/>
      <variable name="DB" units="first_order_rate_constant" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>R</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>DR</ci>
                  <ci>pi_C</ci>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <ci>DB</ci>
                     <ci>pi_C</ci>
                  </apply>
                  <ci>R</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="B">
      <variable name="B" units="picomolar" initial_value="0" public_interface="out"/>
      <variable name="kB" units="first_order_rate_constant" public_interface="in"/>
      <variable name="pi_C" units="dimensionless" public_interface="in"/>
      <variable name="DB" units="first_order_rate_constant" public_interface="in"/>
      <variable name="R" units="picomolar" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>B</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <ci>DB</ci>
                     <ci>pi_C</ci>
                  </apply>
                  <ci>R</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>kB</ci>
                  <ci>B</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="C">
      <variable name="C" units="picomolar" initial_value="0" public_interface="out"/>
      <variable name="DC" units="flux" public_interface="in"/>
      <variable name="pi_L" units="dimensionless" public_interface="in"/>
      <variable name="pi_C" units="dimensionless" public_interface="in"/>
      <variable name="DA" units="first_order_rate_constant" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>DC</ci>
                  <ci>pi_L</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>DA</ci>
                  <ci>pi_C</ci>
                  <ci>C</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="pi_L">
      <variable name="pi_L" units="dimensionless" public_interface="out"/>
      <variable name="k1" units="second_order_rate_constant" initial_value="1e-2"/>
      <variable name="k2" units="first_order_rate_constant" initial_value="10"/>
      <variable name="k3" units="second_order_rate_constant" initial_value="5.8e-4"/>
      <variable name="k4" units="first_order_rate_constant" initial_value="1.7e-2"/>
      <variable name="K" units="picomolar" initial_value="10"/>
      <variable name="ko" units="first_order_rate_constant" initial_value="0.35"/>
      <variable name="Io" units="flux"/>
      <variable name="IL" units="flux"/>
      <variable name="rL" units="flux" initial_value="1e3"/>
      <variable name="KOP" units="picomole_day_picomole_cells" initial_value="2e5"/>
      <variable name="KLP" units="picomole_picomole_cells" initial_value="3e6"/>
      <variable name="pi_P" units="dimensionless" public_interface="in"/>
      <variable name="B" units="picomolar" public_interface="in"/>
      <variable name="R" units="picomolar" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>pi_L</ci>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <apply>
                              <divide/>
                              <ci>k3</ci>
                              <ci>k4</ci>
                           </apply>
                           <ci>KLP</ci>
                        </apply>
                        <cn cellml:units="picomole_picomole_cells">1</cn>
                     </apply>
                     <ci>pi_P</ci>
                     <ci>B</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>k3</ci>
                           <ci>K</ci>
                        </apply>
                        <ci>k4</ci>
                     </apply>
                     <apply>
                        <times/>
                        <apply>
                           <divide/>
                           <ci>k1</ci>
                           <apply>
                              <times/>
                              <ci>k2</ci>
                              <ci>ko</ci>
                           </apply>
                        </apply>
                        <apply>
                           <plus/>
                           <apply>
                              <times/>
                              <apply>
                                 <divide/>
                                 <apply>
                                    <divide/>
                                    <ci>KOP</ci>
                                    <cn cellml:units="picomole_picomole_cells">1</cn>
                                 </apply>
                                 <ci>pi_P</ci>
                              </apply>
                              <ci>R</ci>
                           </apply>
                           <ci>Io</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <divide/>
                     <ci>IL</ci>
                     <ci>rL</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Io</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="flux">90000</cn>
                  <apply>
                     <geq/>
                     <ci>time</ci>
                     <cn cellml:units="day">80</cn>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="flux">0</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <ci>IL</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="flux">10000</cn>
                  <apply>
                     <geq/>
                     <ci>time</ci>
                     <cn cellml:units="day">20</cn>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="flux">0</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="model_parameters">
      <variable name="DA" units="first_order_rate_constant" initial_value="0.7" public_interface="out"/>
      <variable name="DB" units="first_order_rate_constant" public_interface="out"/>
      <variable name="DC" units="flux" initial_value="2.1e-3" public_interface="out"/>
      <variable name="DR" units="flux" initial_value="7e-4" public_interface="out"/>
      <variable name="kB" units="first_order_rate_constant" initial_value="0.189" public_interface="out"/>
      <variable name="pi_C" units="dimensionless" public_interface="out"/>
      <variable name="pi_P" units="dimensionless" public_interface="out"/>
      <variable name="f0" units="dimensionless" initial_value="0.05"/>
      <variable name="dB" units="first_order_rate_constant" initial_value="0.7"/>
      <variable name="IP" units="flux" initial_value="0"/>
      <variable name="kP" units="first_order_rate_constant" initial_value="86"/>
      <variable name="P" units="picomolar"/>
      <variable name="P_0" units="picomolar"/>
      <variable name="P_s" units="picomolar"/>
      <variable name="C_s" units="picomolar" initial_value="5e-3"/>
      <variable name="SP" units="flux" initial_value="250"/>
      <variable name="k5" units="second_order_rate_constant" initial_value="0.02"/>
      <variable name="k6" units="first_order_rate_constant" initial_value="3"/>
      <variable name="C" units="picomolar" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>DB</ci>
            <apply>
               <times/>
               <ci>f0</ci>
               <ci>dB</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>pi_C</ci>
            <apply>
               <divide/>
               <apply>
                  <plus/>
                  <ci>C</ci>
                  <apply>
                     <times/>
                     <ci>f0</ci>
                     <ci>C_s</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <ci>C</ci>
                  <ci>C_s</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>pi_P</ci>
            <apply>
               <divide/>
               <apply>
                  <plus/>
                  <ci>P</ci>
                  <ci>P_0</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>P</ci>
                  <ci>P_s</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>P</ci>
            <apply>
               <divide/>
               <ci>IP</ci>
               <ci>kP</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>P_0</ci>
            <apply>
               <divide/>
               <ci>SP</ci>
               <ci>kP</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>P_s</ci>
            <apply>
               <divide/>
               <ci>k6</ci>
               <ci>k5</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="R" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="B" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="C" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="pi_L" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="R" component_2="model_parameters"/>
      <map_variables variable_1="DR" variable_2="DR"/>
      <map_variables variable_1="DB" variable_2="DB"/>
      <map_variables variable_1="pi_C" variable_2="pi_C"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="R" component_2="B"/>
      <map_variables variable_1="R" variable_2="R"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="B" component_2="model_parameters"/>
      <map_variables variable_1="kB" variable_2="kB"/>
      <map_variables variable_1="DB" variable_2="DB"/>
      <map_variables variable_1="pi_C" variable_2="pi_C"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="C" component_2="pi_L"/>
      <map_variables variable_1="pi_L" variable_2="pi_L"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="C" component_2="model_parameters"/>
      <map_variables variable_1="DA" variable_2="DA"/>
      <map_variables variable_1="DC" variable_2="DC"/>
      <map_variables variable_1="pi_C" variable_2="pi_C"/>
      <map_variables variable_1="C" variable_2="C"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="B" component_2="pi_L"/>
      <map_variables variable_1="B" variable_2="B"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="R" component_2="pi_L"/>
      <map_variables variable_1="R" variable_2="R"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="pi_L" component_2="model_parameters"/>
      <map_variables variable_1="pi_P" variable_2="pi_P"/>
   </connection>
</model>
