<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 3/11/2009 at 10:35:47 at a.m. using:

COR (0.9.31.1329)
Copyright 2002-2009 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#"  cmeta:id="grange_holford_guentert_2001_complete" name="grange_holford_guentert_2001_complete">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>A pharmacokinetic model to predict the PK interaction of L-dopa and benserazide in rats
</title>
				<author>
					<firstname>Geoffrey</firstname>
					<surname>Nunns</surname>
					<affiliation>
						<shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
				This CellML model runs in PCenv, COR and OpenCell to recreate the published results (Figures 5 and 7). This model describes the metabolism of both L-dopa and benserazide. This model was created using the paper equations supplemented by suggestions made by Dr. Holford, as the original code was not available.   
				</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
PURPOSE: To study the PK interaction of L-dopa/benserazide in rats. METHODS: Male rats received a single oral dose of 80 mg/kg L-dopa or 20 mg/kg benserazide or 80/20 mg/kg L-dopa/benserazide. Based on plasma concentrations the kinetics of L-dopa, 3-O-methyldopa (3-OMD), benserazide, and its metabolite Ro 04-5127 were characterized by noncompartmental analysis and a compartmental model where total L-dopa clearance was the sum of the clearances mediated by amino-acid-decarboxylase (AADC), catechol-O-methyltransferase and other enzymes. In the model Ro 04-5127 inhibited competitively the L-dopa clearance by AADC. RESULTS: The coadministration of L-dopa/benserazide resulted in a major increase in systemic exposure to L-dopa and 3-OMD and a decrease in L-dopa clearance. The compartmental model allowed an adequate description of the observed L-dopa and 3-OMD concentrations in the absence and presence of benserazide. It had an advantage over noncompartmental analysis because it could describe the temporal change of inhibition and recovery of AADC. CONCLUSIONS: Our study is the first investigation where the kinetics of benserazide and Ro 04-5127 have been described by a compartmental model. The L-dopa/benserazide model allowed a mechanism-based view of the L-dopa/benserazide interaction and supports the hypothesis that Ro 04-5127 is the primary active metabolite of benserazide.


</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
A pharmacokinetic model to predict the PK interaction of L-dopa and benserazide in rats, Susan Grange, Nicholas H. G. Holford, Theodor W. Guentert, 2001, <emphasis>Pharm Res.</emphasis>, volume 18, 1174-1184.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=11587490 &amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 11587490 </ulink>
				</para>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>model diagram</title>
							</objectinfo>
							<imagedata fileref="grange_2001b.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the conceptual model to describe kinetics of benserazide and Ro 04-5127.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<foo xmlns="http://www.example.org/foo/bar/baz"/>
		<rdf:Description rdf:about="">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A pharmacokinetic model to predict the PK interaction of L-dopa and benserazide in rats (L-dopa + Benserazide)</dc:title>
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
				<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
					<vCard:Family>Nunns</vCard:Family>
					<vCard:Given>Geoffrey</vCard:Given>
					<vCard:Other>Rogan</vCard:Other>
				</vCard:N>
				<vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
					<rdf:value>gnunns1@jhu.edu</rdf:value>
					<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
				</vCard:EMAIL>
				<vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
					<vCard:Orgname>The University of Auckland</vCard:Orgname>
					<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
				</vCard:ORG>
			</dc:creator>
			<dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
				<dcterms:W3CDTF>2009-10-19</dcterms:W3CDTF>
			</dcterms:created>
		</rdf:Description>
		<rdf:Description rdf:about="#grange_holford_guentert_2001_complete">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">The Grange et al. 2001 pharmokinetic model of the PK interaction of L-Dopa and Benserazide in Rats</dc:title>
			<cmeta:comment rdf:parseType="Resource">
				<rdf:value>This is the CellML description of the Grange et al.'s pharmokinetic model of the PK interaction of L-Dopa and Benserazide in Rats</rdf:value>
				<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
					<vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Geoffrey Nunns</vCard:FN>
				</dc:creator>
			</cmeta:comment>
			<cmeta:species>Rat</cmeta:species>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
				<dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
					<bqs:subject_type>keyword</bqs:subject_type>
					<rdf:value>
						<rdf:Bag>
							<rdf:li>metabolism</rdf:li>
							<rdf:li>PKPD</rdf:li>
							<rdf:li>L-dopa</rdf:li>
							<rdf:li>benserazide</rdf:li>
						</rdf:Bag>
					</rdf:value>
				</dc:subject>
			</bqs:reference>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
				<bqs:Pubmed_id>11587490</bqs:Pubmed_id>
				<bqs:JournalArticle rdf:parseType="Resource">
					<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
						<rdf:Seq>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Grange</vCard:Family>
										<vCard:Given>Susan</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Holford</vCard:Family>
										<vCard:Given>Nicholas</vCard:Given>
										<vCard:Other>H</vCard:Other>
										<vCard:Other>G</vCard:Other>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Guentert</vCard:Family>
										<vCard:Given>Theodor</vCard:Given>
										<vCard:Other>W</vCard:Other>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
						</rdf:Seq>
					</dc:creator>
					<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">A pharmacokinetic model to predict the PK interaction of L-dopa and benserazide in rats</dc:title>
					<dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
						<dcterms:W3CDTF>2001-05-4</dcterms:W3CDTF>
					</dcterms:issued>
					<bqs:Journal rdf:parseType="Resource">
						<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Pharm Res.</dc:title>
					</bqs:Journal>
					<bqs:volume>18</bqs:volume>
					<bqs:first_page>1174</bqs:first_page>
					<bqs:last_page>1184</bqs:last_page>
				</bqs:JournalArticle>
			</bqs:reference>
		</rdf:Description>
	</rdf:RDF>   <units name="uM">
      <unit prefix="micro" units="mole"/>
      <unit exponent="-1" units="liter"/>
   </units>
   <units name="umole">
      <unit prefix="micro" units="mole"/>
   </units>
   <units name="uM_liter">
      <unit units="uM"/>
      <unit units="liter"/>
   </units>
   <units name="uM_hour">
      <unit units="uM"/>
      <unit units="hour"/>
   </units>
   <units name="hour">
      <unit multiplier="3600" units="second"/>
   </units>
   <units name="per_hour">
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="liter_per_hour">
      <unit units="liter"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="hour"/>
   </component>
   <component name="gastrointestinal_compartment_L_dopa">
      <variable name="F_c_dopa" public_interface="out" units="dimensionless"/>
      <variable initial_value="101" name="A_dopa_c" public_interface="out" units="umole"/>
      <variable initial_value="1.29" name="ka_c_dopa" public_interface="out" units="per_hour"/>
      <variable name="F_G" units="dimensionless"/>
      <variable name="F_H" units="dimensionless"/>
      <variable name="CL_H" units="liter_per_hour"/>
      <variable initial_value="0.828" name="Q" units="liter_per_hour"/>
      <variable initial_value="0.13" name="f_H" units="dimensionless"/>
      <variable name="CL_dopa_0" public_interface="in" units="liter_per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>F_H</ci>
            <apply>
               <minus/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               <apply>
                  <divide/>
                  <ci>CL_H</ci>
                  <ci>Q</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>F_G</ci>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
         </apply>
         <apply>
            <eq/>
            <ci>CL_H</ci>
            <apply>
               <times/>
               <ci>f_H</ci>
               <ci>CL_dopa_0</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>F_c_dopa</ci>
            <apply>
               <times/>
               <ci>F_H</ci>
               <ci>F_G</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A_dopa_c</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <minus/>
                  <ci>ka_c_dopa</ci>
               </apply>
               <ci>A_dopa_c</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="body_compartment_L_dopa">
      <variable initial_value="0" name="C_dopa_c" public_interface="out" units="uM"/>
      <variable initial_value="0.496" name="V_dopa" units="liter"/>
      <variable name="time" public_interface="in" units="hour"/>
      <variable name="A_dopa_c" public_interface="in" units="umole"/>
      <variable name="F_c_dopa" public_interface="in" units="dimensionless"/>
      <variable name="ka_c_dopa" public_interface="in" units="per_hour"/>
      <variable name="CL_dopa" public_interface="in" units="liter_per_hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_dopa_c</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <ci>V_dopa</ci>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>ka_c_dopa</ci>
                     <ci>A_dopa_c</ci>
                     <ci>F_c_dopa</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>CL_dopa</ci>
                     <ci>C_dopa_c</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="body_compartment_3_OMD">
      <variable initial_value="0" name="C_OMD_c" units="uM"/>
      <variable initial_value="0.00895" name="CL_OMD_c" units="liter_per_hour"/>
      <variable initial_value="0.128" name="V_OMD_c" units="liter"/>
      <variable name="time" public_interface="in" units="hour"/>
      <variable name="C_dopa_c" public_interface="in" units="uM"/>
      <variable name="CL_COMT" public_interface="in" units="liter_per_hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_OMD_c</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <ci>V_OMD_c</ci>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>CL_COMT</ci>
                     <ci>C_dopa_c</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>CL_OMD_c</ci>
                     <ci>C_OMD_c</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="L_dopa_clearance">
      <variable name="CL_dopa" public_interface="out" units="liter_per_hour"/>
      <variable initial_value="0.823" name="CL_dopa_0" public_interface="out" units="liter_per_hour"/>
      <variable name="CL_COMT" public_interface="out" units="liter_per_hour"/>
      <variable name="CL_AADC" units="liter_per_hour"/>
      <variable name="CL_AADC0" units="liter_per_hour"/>
      <variable name="C1_M" public_interface="in" units="uM"/>
      <variable name="CL_REST" units="liter_per_hour"/>
      <variable initial_value="0.00246" name="ki" units="uM"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>CL_dopa</ci>
            <apply>
               <plus/>
               <ci>CL_AADC</ci>
               <ci>CL_COMT</ci>
               <ci>CL_REST</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>CL_AADC</ci>
            <apply>
               <divide/>
               <ci>CL_AADC0</ci>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <divide/>
                     <ci>C1_M</ci>
                     <ci>ki</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>CL_AADC0</ci>
            <apply>
               <times/>
               <ci>CL_dopa_0</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.69</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>CL_COMT</ci>
            <apply>
               <times/>
               <ci>CL_dopa_0</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.1</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>CL_REST</ci>
            <apply>
               <times/>
               <ci>CL_dopa_0</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.21</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component name="gastrointestinal_compartment_benserazide">
      <variable cmeta:id="gastrointestinal_compartment_benserazide_A_bens" initial_value="19.51" name="A_bens" public_interface="out" units="umole"/>
      <variable initial_value="0.94" name="ka_B" public_interface="out" units="per_hour"/>
      <variable initial_value="0.022" name="F_B" public_interface="out" units="dimensionless"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A_bens</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <minus/>
                  <ci>ka_B</ci>
               </apply>
               <ci>A_bens</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="central_compartment_benserazide">
      <variable cmeta:id="central_compartment_benserazide_C_bens_central" initial_value="0" name="C_bens_central" public_interface="out" units="uM"/>
      <variable initial_value="0.202" name="V1_B" units="liter"/>
      <variable initial_value="0.072" name="CLd_B" public_interface="out" units="liter_per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <variable name="A_bens" public_interface="in" units="umole"/>
      <variable name="ka_B" public_interface="in" units="per_hour"/>
      <variable name="F_B" public_interface="in" units="dimensionless"/>
      <variable name="C_bens_peripheral" public_interface="in" units="uM"/>
      <variable name="CL_bens_total" public_interface="in" units="liter_per_hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_bens_central</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <ci>V1_B</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>ka_B</ci>
                        <ci>A_bens</ci>
                        <ci>F_B</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>CL_bens_total</ci>
                        <ci>C_bens_central</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>CLd_B</ci>
                     <apply>
                        <minus/>
                        <ci>C_bens_peripheral</ci>
                        <ci>C_bens_central</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="peripheral_compartment_benserazide">
      <variable cmeta:id="peripheral_compartment_benserazide_C_bens_peripheral" initial_value="0" name="C_bens_peripheral" public_interface="out" units="uM"/>
      <variable initial_value="0.127" name="V2_B" units="liter"/>
      <variable name="time" public_interface="in" units="hour"/>
      <variable name="CLd_B" public_interface="in" units="liter_per_hour"/>
      <variable name="C_bens_central" public_interface="in" units="uM"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_bens_peripheral</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <ci>V2_B</ci>
               </apply>
               <ci>CLd_B</ci>
               <apply>
                  <minus/>
                  <ci>C_bens_central</ci>
                  <ci>C_bens_peripheral</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="benserazide_clearance">
      <variable name="CL_bens_total" public_interface="out" units="liter_per_hour"/>
      <variable name="CL_Ro" public_interface="out" units="liter_per_hour"/>
      <variable initial_value="1.67" name="CL_B" units="liter_per_hour"/>
      <variable initial_value="0.15" name="fm" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>CL_bens_total</ci>
            <apply>
               <divide/>
               <ci>CL_B</ci>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <ci>fm</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>CL_Ro</ci>
            <apply>
               <times/>
               <ci>CL_bens_total</ci>
               <ci>fm</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="gastrointestinal_compartment_Ro">
      <variable cmeta:id="gastrointestinal_compartment_Ro_A_Ro" initial_value="1.3658" name="A_Ro" public_interface="out" units="umole"/>
      <variable initial_value="2.47" name="ka_M" public_interface="out" units="per_hour"/>
      <variable initial_value="1" name="F_Ro" public_interface="out" units="dimensionless"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>A_Ro</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <minus/>
                  <ci>ka_M</ci>
               </apply>
               <ci>A_Ro</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="central_compartment_Ro">
      <variable cmeta:id="central_compartment_Ro_C_Ro_central" initial_value="0" name="C_Ro_central" public_interface="out" units="uM"/>
      <variable initial_value="0.0691" name="V1_M" units="liter"/>
      <variable initial_value="1.06" name="CLd_M" public_interface="out" units="liter_per_hour"/>
      <variable initial_value="4.29" name="CL_M" units="liter_per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <variable name="C_bens_central" public_interface="in" units="uM"/>
      <variable name="CL_Ro" public_interface="in" units="liter_per_hour"/>
      <variable name="A_Ro" public_interface="in" units="umole"/>
      <variable name="ka_M" public_interface="in" units="per_hour"/>
      <variable name="F_Ro" public_interface="in" units="dimensionless"/>
      <variable name="C_Ro_peripheral" public_interface="in" units="uM"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_Ro_central</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <ci>V1_M</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>ka_M</ci>
                        <ci>A_Ro</ci>
                        <ci>F_Ro</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>CL_M</ci>
                        <ci>C_Ro_central</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>CL_Ro</ci>
                     <ci>C_bens_central</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>CLd_M</ci>
                     <apply>
                        <minus/>
                        <ci>C_Ro_peripheral</ci>
                        <ci>C_Ro_central</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="peripheral_compartment_Ro">
      <variable cmeta:id="peripheral_compartment_Ro_C_Ro_peripheral" initial_value="0" name="C_Ro_peripheral" public_interface="out" units="uM"/>
      <variable initial_value="3.2" name="V2_M" units="liter"/>
      <variable name="time" public_interface="in" units="hour"/>
      <variable name="CLd_M" public_interface="in" units="liter_per_hour"/>
      <variable name="C_Ro_central" public_interface="in" units="uM"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_Ro_peripheral</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <ci>V2_M</ci>
               </apply>
               <ci>CLd_M</ci>
               <apply>
                  <minus/>
                  <ci>C_Ro_central</ci>
                  <ci>C_Ro_peripheral</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="gastrointestinal_compartment_L_dopa"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="body_compartment_L_dopa"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="body_compartment_3_OMD"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="gastrointestinal_compartment_benserazide"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="central_compartment_benserazide"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="peripheral_compartment_benserazide"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="gastrointestinal_compartment_Ro"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="central_compartment_Ro"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="peripheral_compartment_Ro"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="gastrointestinal_compartment_L_dopa" component_2="body_compartment_L_dopa"/>
      <map_variables variable_1="A_dopa_c" variable_2="A_dopa_c"/>
      <map_variables variable_1="F_c_dopa" variable_2="F_c_dopa"/>
      <map_variables variable_1="ka_c_dopa" variable_2="ka_c_dopa"/>
   </connection>
   <connection>
      <map_components component_1="body_compartment_L_dopa" component_2="body_compartment_3_OMD"/>
      <map_variables variable_1="C_dopa_c" variable_2="C_dopa_c"/>
   </connection>
   <connection>
      <map_components component_1="L_dopa_clearance" component_2="gastrointestinal_compartment_L_dopa"/>
      <map_variables variable_1="CL_dopa_0" variable_2="CL_dopa_0"/>
   </connection>
   <connection>
      <map_components component_1="L_dopa_clearance" component_2="body_compartment_L_dopa"/>
      <map_variables variable_1="CL_dopa" variable_2="CL_dopa"/>
   </connection>
   <connection>
      <map_components component_1="L_dopa_clearance" component_2="body_compartment_3_OMD"/>
      <map_variables variable_1="CL_COMT" variable_2="CL_COMT"/>
   </connection>
   <connection>
      <map_components component_1="L_dopa_clearance" component_2="central_compartment_Ro"/>
      <map_variables variable_1="C1_M" variable_2="C_Ro_central"/>
   </connection>
   <connection>
      <map_components component_1="gastrointestinal_compartment_benserazide" component_2="central_compartment_benserazide"/>
      <map_variables variable_1="A_bens" variable_2="A_bens"/>
      <map_variables variable_1="ka_B" variable_2="ka_B"/>
      <map_variables variable_1="F_B" variable_2="F_B"/>
   </connection>
   <connection>
      <map_components component_1="central_compartment_benserazide" component_2="peripheral_compartment_benserazide"/>
      <map_variables variable_1="C_bens_central" variable_2="C_bens_central"/>
      <map_variables variable_1="C_bens_peripheral" variable_2="C_bens_peripheral"/>
      <map_variables variable_1="CLd_B" variable_2="CLd_B"/>
   </connection>
   <connection>
      <map_components component_1="central_compartment_benserazide" component_2="benserazide_clearance"/>
      <map_variables variable_1="CL_bens_total" variable_2="CL_bens_total"/>
   </connection>
   <connection>
      <map_components component_1="gastrointestinal_compartment_Ro" component_2="central_compartment_Ro"/>
      <map_variables variable_1="A_Ro" variable_2="A_Ro"/>
      <map_variables variable_1="ka_M" variable_2="ka_M"/>
      <map_variables variable_1="F_Ro" variable_2="F_Ro"/>
   </connection>
   <connection>
      <map_components component_1="central_compartment_benserazide" component_2="central_compartment_Ro"/>
      <map_variables variable_1="C_bens_central" variable_2="C_bens_central"/>
   </connection>
   <connection>
      <map_components component_1="central_compartment_Ro" component_2="benserazide_clearance"/>
      <map_variables variable_1="CL_Ro" variable_2="CL_Ro"/>
   </connection>
   <connection>
      <map_components component_1="central_compartment_Ro" component_2="peripheral_compartment_Ro"/>
      <map_variables variable_1="C_Ro_central" variable_2="C_Ro_central"/>
      <map_variables variable_1="C_Ro_peripheral" variable_2="C_Ro_peripheral"/>
      <map_variables variable_1="CLd_M" variable_2="CLd_M"/>
   </connection>
</model>