// This CellML file was generated on 19/06/2009 at 09:10:40 using:
//
// COR (0.9.31.813)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
def model Li_Smith_2009 as
  // G-Protein Specificity In Synaptic Signalling
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // Model Structure
  //
  // A model of Ca2+ dynamics in mouse ventricular myocytes from the C57BL/6 strain has been developed, based on experimental data at the same temperature and under consistent experimental conditions and protocols.
  //
  // Parameterisation of the NCX, SERCA and LCC formulations were done sequentially. The model of NCX, based on the Luo and Rudy 1994 formulation, was first fitted from the decay of the caffeine-induced [Ca2+]i transient, which allowed us to infer the flux through SERCA from the decay of the field-stimulated [Ca2+]i transient. Frequency-dependence of the flux through SERCA was accounted for using Hund and Rudy 2002 formulation of Ca2+/calmodulin kinase II regulatory pathway, with parameters fitted to experimentally measured SERCA flux at 0.5, 1 and 3Hz pacing frequencies. The L-type Ca2+ channel model, with slight modifications to the Hinch 2004 formulation, was fitted to data from voltage-clamp experiments. All these component models were then incorporated into the whole-cell AP model of Bondarenko et al., with parameters of RyR adjusted to match the experimentally observed time-to-peak of the [Ca2+]i transient at 3Hz, and parameters for the background Ca2+ current and PMCA adjusted to match experimentally observed diastolic [Ca2+]i levels.
  //
  // reaction diagram
  //
  // Schematic diagram of the Bondarenko 2004 model.
  //
  // Associated data
  //
  // Caffeine (Caffeine.zip) - Caffeine-induced Ca2+ transients from 18 individual myocytes
  //
  // Each file contains the time course of caffeine-induced Ca2+ transients from a myocyte. The traces were exported from IonOptix for the duration of the caffeine application.
  //
  // Related parameter: Kncx
  //
  // Fitting process: 1. The decay of individual transients were aligned and averaged. 2. The rate of decay of the average transient, after taking into account of intracellular buffering, was used to calculate Jncx. Jncx was then used to fit Kncx in the Luo and Rudy 1994 model.
  //
  // 3Hz (3Hz.zip) - Field-stimulated Ca2+ transients at 3Hz from 19 individual myocytes
  //
  // Each file contains the time course of a Ca2+ transient, field stimulated at 3Hz, from a myocyte. The time course was exported from IonOptix for a duration of 1s starting from the first stimulus.
  //
  // Related parameter: Km, serca, Vserca at 3Hz
  //
  // Fitting process: 1. The individual transients were averaged. The decay of the average transient, from 70ms after-peak until the end of the period was analysed. 2. Jncx was inferred from previously fitted NCX model, and the difference between the total Ca2+ flux and Jncx was taken as the net SR Ca2+ uptake Jup. 3 A small SR leak (0.008μM/ms) was included so the flux of Ca2+ through SERCA Jserca = Jup+ Jleak 4. Jserca was used to fit the Km,serca and Vserca at 3Hz.
  //
  // 1Hz (1Hz.zip) - Field-stimulated Ca2+ transients at 1Hz from 7 individual myocytes
  //
  // Each file contains the time course of a Ca2+ transient, field stimulated at 1Hz, from a myocyte.
  //
  // Related parameter: Estimated Vserca at 1Hz
  //
  // 1. The derivation of Jserca at 1Hz is similar to above. 2. Jserca was used to constrain Vserca at 1Hz
  //
  // 0.5Hz (0.5Hz.zip) - Field-stimulated Ca2+ transients at 0.5Hz from 7 individual myocytes
  //
  // Each file contains the time course of a Ca2+ transient, field stimulated at 0.5Hz, from a myocyte
  //
  // Related parameter: Estimated Vserca at 0.5Hz
  //
  // 1. The derivation of Jserca at 0.5Hz is similar to above. 2. Jserca was used to constrain Vserca at 0.5Hz
  //
  // Ica (Ica.zip) - Time courses of transmembrane currents from 5 individual myocytes.
  //
  // Each file contains the time course of experimentally measured L-type Ca2+ current from one myocyte, measured in nA.
  //
  // PCaL, ∆VL, VL, ΦL, tL, τL, KL, a, b, p, q
  //
  // Fitting process: 1. The time course of transmembrane currents individual myocytes were averaged for each test potential between -20 and 20mV (-20, -10, 0, 10, 20mV). 2. Averaged currents were converted into current densities by division by cell membrane capacitance (138.66pF). 3. Simulated sum of late K+ currents, from the Bondarenko et al 2004 formulation, for test potentials -20, -10, 0, 10, 20mV were subtracted from the decay phase of each current. 4. The decay of the current at each test potential, after correcting for late K+ currents, was fitted to a single exponential function, giving a time constant of decay tau value. 5. The IV relation and tau values at each test potential were used to fit the model of LCC.
  //
  // Ica/IV.xls (Ica.zip) - Experimentally measured current-voltage relation for the L-type Ca2+ current
  //
  // Average current-voltage curve.
  //
  // Related parameter: PCaL, ∆VL, VL, ΦL, tL, τL, KL, a, b, p, q
  //
  // Fitting process: as for Ica
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit micromolar_per_millisecond as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_micromolar_millisecond as
    unit micromolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar3_per_millisecond as
    unit micromolar {expo: -3};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar4_per_millisecond as
    unit micromolar {expo: -4};
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit millivolt2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit per_picoF as
    unit picoF {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -85.64004, pub: out};
    var Cm: microF_per_cm2 {init: 1, pub: out};
    var Vmyo: microlitre {init: 2.2e-5, pub: out};
    var VJSR: microlitre {init: 1.022e-7, pub: out};
    var VNSR: microlitre {init: 1.786e-6, pub: out};
    var Vss: microlitre {init: 1.264e-9, pub: out};
    var Acap: cm2 {init: 0.00013866, pub: out};
    var Ko: micromolar {init: 5400, pub: out};
    var Nao: micromolar {init: 134000, pub: out};
    var Cao: micromolar {init: 1400, pub: out};
    var R: joule_per_mole_kelvin {init: 8.314, pub: out};
    var T: kelvin {init: 308, pub: out};
    var F: coulomb_per_millimole {init: 96.5, pub: out};
    var time: millisecond {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_pCa: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_Cab: picoA_per_picoF {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_Nab: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Kto_f: picoA_per_picoF {pub: in};
    var i_Kto_s: picoA_per_picoF {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_Kur: picoA_per_picoF {pub: in};
    var i_Kss: picoA_per_picoF {pub: in};
    var i_ClCa: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var stim_offset: millisecond {init: 100};
    var stim_period: millisecond {init: 333.3333333};
    var stim_duration: millisecond {init: 3};
    var stim_amplitude: picoA_per_picoF {init: -15};
    var i_Stim: picoA_per_picoF {pub: out};
    var past: millisecond;
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA_per_picoF};
    endsel;
    ode(V, time) = -(i_CaL+i_pCa+i_NaCa+i_Cab+i_Na+i_Nab+i_NaK+i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kur+i_Kss+i_Kr+i_ClCa+i_Stim);
  enddef;

  def comp calcium_concentration as
    var Cai: micromolar {init: 0.1040595, pub: out};
    var Cass: micromolar {init: 0.1043777, pub: out};
    var CaJSR: micromolar {init: 730.0589, pub: out};
    var CaNSR: micromolar {init: 841.106, pub: out};
    var Bi: dimensionless;
    var Bss: dimensionless;
    var BJSR: dimensionless;
    var Bmax: micromolar {init: 109};
    var CSQN_tot: micromolar {init: 15000};
    var Kd: micromolar {init: 0.6};
    var Km_CSQN: micromolar {init: 800};
    var Acap: cm2 {pub: in};
    var Vmyo: microlitre {pub: in};
    var VJSR: microlitre {pub: in};
    var Vss: microlitre {pub: in};
    var VNSR: microlitre {pub: in};
    var V: millivolt {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_Cab: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_pCa: picoA_per_picoF {pub: in};
    var J_leak: micromolar_per_millisecond {pub: in};
    var J_rel: micromolar_per_millisecond {pub: in};
    var J_serca: micromolar_per_millisecond {pub: in};
    var J_tr: micromolar_per_millisecond {pub: in};
    var J_xfer: micromolar_per_millisecond {pub: in};
    ode(Cai, time) = Bi*(J_leak+J_xfer-(i_Cab+i_pCa-2{dimensionless}*i_NaCa)*Acap*Cm/(2{dimensionless}*Vmyo*F)-J_serca);
    ode(Cass, time) = Bss*(J_rel*VJSR/Vss-(J_xfer*Vmyo/Vss+i_CaL*Acap*Cm/(2{dimensionless}*Vss*F)));
    ode(CaJSR, time) = BJSR*(J_tr-J_rel);
    ode(CaNSR, time) = (J_serca-J_leak)*Vmyo/VNSR-J_tr*VJSR/VNSR;
    Bi = pow(1{dimensionless}+Bmax*Kd/sqr(Kd+Cai), -1{dimensionless});
    Bss = pow(1{dimensionless}+Bmax*Kd/sqr(Kd+Cass), -1{dimensionless});
    BJSR = pow(1{dimensionless}+CSQN_tot*Km_CSQN/sqr(Km_CSQN+CaJSR), -1{dimensionless});
  enddef;

  def comp calcium_fluxes as
    var J_leak: micromolar_per_millisecond {pub: out};
    var J_rel: micromolar_per_millisecond {pub: out};
    var J_serca: micromolar_per_millisecond {pub: out};
    var J_tr: micromolar_per_millisecond {pub: out};
    var J_xfer: micromolar_per_millisecond {pub: out};
    var P_RyR: dimensionless {init: 2.290355e-9};
    var v1: per_millisecond {init: 4.5};
    var tau_tr: millisecond {init: 20};
    var v2: per_millisecond {init: 1e-5};
    var tau_xfer: millisecond {init: 8};
    var CaMKb: dimensionless;
    var CaMKt: dimensionless {init: 0.08989079};
    var CaMKa: dimensionless;
    var on_rate: per_millisecond {init: 0.05};
    var off_rate: per_millisecond {init: 0.00068};
    var vmup: micromolar_per_millisecond;
    var Km_up: micromolar {init: 0.412};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var i_CaL_max: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var Cai: micromolar {pub: in};
    var Cass: micromolar {pub: in};
    var CaJSR: micromolar {pub: in};
    var CaNSR: micromolar {pub: in};
    var P_O1: dimensionless {pub: in};
    var P_O2: dimensionless {pub: in};
    var vmup_init: micromolar_per_millisecond {init: 0.3158};
    var P_ryr_const1: per_millisecond {init: -0.09};
    var P_ryr_const2: per_millisecond {init: -0.225};
    J_rel = v1*(P_O1+P_O2)*(CaJSR-Cass)*P_RyR;
    J_tr = (CaNSR-CaJSR)/tau_tr;
    J_xfer = (Cass-Cai)/tau_xfer;
    J_leak = v2*(CaNSR-Cai);
    CaMKb = 0.05{dimensionless}*(1{dimensionless}-CaMKt)*1{dimensionless}/(1{dimensionless}+0.7{micromolar}/Cass);
    ode(CaMKt, time) = on_rate*CaMKb*(CaMKb+CaMKt)-off_rate*CaMKt;
    CaMKa = CaMKb+CaMKt;
    vmup = (3.1512{dimensionless}*pow(CaMKa, 2.2062{dimensionless})/(pow(0.1588{dimensionless}, 2.2062{dimensionless})+pow(CaMKa, 2.2062{dimensionless}))+1{dimensionless})*vmup_init;
    J_serca = vmup*sqr(Cai)/(sqr(Km_up)+sqr(Cai));
    ode(P_RyR, time) = P_ryr_const1*P_RyR+P_ryr_const2*i_CaL/i_CaL_max*exp(-sqr(V-5{millivolt})/648{millivolt2});
  enddef;

  def comp ryanodine_receptors as
    var P_O1: dimensionless {init: 0.003825599, pub: out};
    var P_O2: dimensionless {init: 1.835831e-8, pub: out};
    var P_C1: dimensionless {pub: out};
    var P_C2: dimensionless {init: 0.3797679, pub: out};
    var k_plus_a: micromolar4_per_millisecond {init: 0.006075};
    var k_minus_a: per_millisecond {init: 0.07125};
    var k_plus_b: micromolar3_per_millisecond {init: 0.00405};
    var k_minus_b: per_millisecond {init: 0.965};
    var k_plus_c: per_millisecond {init: 0.009};
    var k_minus_c: per_millisecond {init: 0.0008};
    var m: dimensionless {init: 3};
    var n: dimensionless {init: 4};
    var time: millisecond {pub: in};
    var Cass: micromolar {pub: in};
    ode(P_O1, time) = k_plus_a*pow(Cass, n)*P_C1+k_minus_b*P_O2+k_minus_c*P_C2-(k_minus_a*P_O1+k_plus_b*pow(Cass, m)*P_O1+k_plus_c*P_O1);
    P_C1 = 1{dimensionless}-(P_C2+P_O1+P_O2);
    ode(P_O2, time) = k_plus_b*pow(Cass, m)*P_O1-k_minus_b*P_O2;
    ode(P_C2, time) = k_plus_c*P_O1-k_minus_c*P_C2;
  enddef;

  def comp L_type_calcium_current as
    var i_CaL: picoA_per_picoF {pub: out};
    var i_CaL_max: picoA_per_picoF {init: 4, pub: out};
    var P_CaL: per_millisecond {init: 19.1078};
    var O: dimensionless {init: 4.373318e-6};
    var C: dimensionless;
    var I: dimensionless {init: 0.009171979};
    var y_gate: dimensionless {init: 0.8876797};
    var y_gate_inf: dimensionless;
    var y_gate_tau: millisecond;
    var Cass: micromolar {pub: in};
    var alpha_p: per_millisecond;
    var alpha_m: per_millisecond;
    var epsilon_p: per_micromolar_millisecond;
    var epsilon_m: per_millisecond;
    var V_L: millivolt {init: -2};
    var delta_V_L: millivolt {init: 7.0671};
    var t_L: millisecond {init: 1.1683};
    var phi_L: dimensionless {init: 1.6411};
    var a: dimensionless {init: 0.07};
    var b: dimensionless {init: 14};
    var tau_L: millisecond {init: 972.9715};
    var K_L: micromolar {init: 0.0964};
    var expVL: dimensionless;
    var FVRT: dimensionless;
    var FVRT_Ca: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Cao: micromolar {pub: in};
    var T: kelvin {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var Acap: cm2 {pub: in};
    var Vss: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var const5: millivolt {init: 6.6755};
    FVRT = F*V/(R*T);
    FVRT_Ca = 2{dimensionless}*FVRT;
    expVL = exp((V-V_L)/delta_V_L);
    alpha_p = expVL/(t_L*(expVL+1{dimensionless}));
    alpha_m = phi_L/t_L;
    epsilon_p = (expVL+a)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_m = b*(expVL+a)/(tau_L*(b*expVL+a));
    y_gate_inf = 1{dimensionless}/(1{dimensionless}+exp((V+16.6577{millivolt})/const5))+0.1{dimensionless}/(1{dimensionless}+exp((-V+40{millivolt})/6{millivolt}));
    y_gate_tau = 20{millisecond}+600{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/9.6{millivolt}));
    C = 1{dimensionless}-O-I;
    ode(O, time) = alpha_p*C-alpha_m*O;
    ode(I, time) = epsilon_p*Cass*C-epsilon_m*I;
    ode(y_gate, time) = (y_gate_inf-y_gate)/y_gate_tau;
    i_CaL = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        -P_CaL*2{dimensionless}*Vss*F/(Acap*Cm)*O*y_gate*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Cao*exp(-FVRT_Ca)-Cass);
      otherwise:
        -P_CaL*2{dimensionless}*Vss*F/(Acap*Cm)*O*y_gate*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Cao*exp(-0.00001{dimensionless})-Cass);
    endsel;
  enddef;

  def comp calcium_pump_current as
    var i_pCa: picoA_per_picoF {pub: out};
    var i_pCa_max: picoA_per_picoF {init: 0.9};
    var Km_pCa: micromolar {init: 0.4};
    var Cai: micromolar {pub: in};
    var J_pCa: micromolar_per_millisecond {pub: out};
    var Vmyo: microlitre {pub: in};
    var Acap: cm2 {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var F: coulomb_per_millimole {pub: in};
    i_pCa = i_pCa_max*sqr(Cai)/(sqr(Km_pCa)+sqr(Cai));
    J_pCa = -i_pCa*Acap*Cm/(2{dimensionless}*Vmyo*F);
  enddef;

  def comp sodium_calcium_exchange_current as
    var J_ncx: micromolar_per_millisecond;
    var i_NaCa: picoA_per_picoF {pub: out};
    var k_NaCa: picoA_per_picoF {init: 772.8991};
    var K_mNa: micromolar {init: 86500};
    var K_mCa: micromolar {init: 1380};
    var k_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    var Vmyo: microlitre {pub: in};
    var Acap: cm2 {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    i_NaCa = k_NaCa*1{dimensionless}/(pow(K_mNa, 3{dimensionless})+pow(Nao, 3{dimensionless}))*1{dimensionless}/(K_mCa+Cao)*1{dimensionless}/(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*V*F/(R*T)))*(exp(eta*V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Nao, 3{dimensionless})*Cai);
    J_ncx = i_NaCa*Acap*Cm/(Vmyo*F);
  enddef;

  def comp calcium_background_current as
    var i_Cab: picoA_per_picoF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.00088};
    var E_CaN: millivolt;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    var J_Cab: micromolar_per_millisecond;
    var Vmyo: microlitre {pub: in};
    var Acap: cm2 {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    i_Cab = g_Cab*(V-E_CaN);
    E_CaN = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    J_Cab = -i_Cab*Acap*Cm/(2{dimensionless}*Vmyo*F);
  enddef;

  def comp sodium_concentration as
    var Nai: micromolar {init: 16522.45, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vmyo: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var Acap: cm2 {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Nab: picoA_per_picoF {pub: in};
    ode(Nai, time) = -(i_Na+i_Nab+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp fast_sodium_current as
    var i_Na: picoA_per_picoF {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: milliS_per_microF {init: 13};
    var O_Na: dimensionless {init: 2.639399e-7};
    var C_Na1: dimensionless {init: 0.0001581035};
    var C_Na2: dimensionless {init: 0.01702105};
    var C_Na3: dimensionless;
    var I1_Na: dimensionless {init: 0.00001799179};
    var I2_Na: dimensionless {init: 0.000005460299};
    var IF_Na: dimensionless {init: 0.0000556206};
    var IC_Na2: dimensionless {init: 0.005985434};
    var IC_Na3: dimensionless {init: 0.2543133};
    var alpha_Na11: per_millisecond;
    var beta_Na11: per_millisecond;
    var alpha_Na12: per_millisecond;
    var beta_Na12: per_millisecond;
    var alpha_Na13: per_millisecond;
    var beta_Na13: per_millisecond;
    var alpha_Na3: per_millisecond;
    var beta_Na3: per_millisecond;
    var alpha_Na2: per_millisecond;
    var beta_Na2: per_millisecond;
    var alpha_Na4: per_millisecond;
    var beta_Na4: per_millisecond;
    var alpha_Na5: per_millisecond;
    var beta_Na5: per_millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nao: micromolar {pub: in};
    var Nai: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var Ki: micromolar {pub: in};
    i_Na = g_Na*O_Na*(V-E_Na);
    E_Na = R*T/F*ln((0.9{dimensionless}*Nao+0.1{dimensionless}*Ko)/(0.9{dimensionless}*Nai+0.1{dimensionless}*Ki));
    C_Na3 = 1{dimensionless}-(O_Na+C_Na1+C_Na2+IF_Na+I1_Na+I2_Na+IC_Na2+IC_Na3);
    ode(C_Na2, time) = alpha_Na11*C_Na3+beta_Na12*C_Na1+alpha_Na3*IC_Na2-(beta_Na11*C_Na2+alpha_Na12*C_Na2+beta_Na3*C_Na2);
    ode(C_Na1, time) = alpha_Na12*C_Na2+beta_Na13*O_Na+alpha_Na3*IF_Na-(beta_Na12*C_Na1+alpha_Na13*C_Na1+beta_Na3*C_Na1);
    ode(O_Na, time) = alpha_Na13*C_Na1+beta_Na2*IF_Na-(beta_Na13*O_Na+alpha_Na2*O_Na);
    ode(IF_Na, time) = alpha_Na2*O_Na+beta_Na3*C_Na1+beta_Na4*I1_Na+alpha_Na12*IC_Na2-(beta_Na2*IF_Na+alpha_Na3*IF_Na+alpha_Na4*IF_Na+beta_Na12*IF_Na);
    ode(I1_Na, time) = alpha_Na4*IF_Na+beta_Na5*I2_Na-(beta_Na4*I1_Na+alpha_Na5*I1_Na);
    ode(I2_Na, time) = alpha_Na5*I1_Na-beta_Na5*I2_Na;
    ode(IC_Na2, time) = alpha_Na11*IC_Na3+beta_Na12*IF_Na+beta_Na3*IC_Na2-(beta_Na11*IC_Na2+alpha_Na12*IC_Na2+alpha_Na3*IC_Na2);
    ode(IC_Na3, time) = beta_Na11*IC_Na2+beta_Na3*C_Na3-(alpha_Na11*IC_Na3+alpha_Na3*IC_Na3);
    alpha_Na11 = 3.802{per_millisecond}/(0.1027{dimensionless}*exp(-(V+2.5{millivolt})/17{millivolt})+0.2{dimensionless}*exp(-(V+2.5{millivolt})/150{millivolt}));
    alpha_Na12 = 3.802{per_millisecond}/(0.1027{dimensionless}*exp(-(V+2.5{millivolt})/15{millivolt})+0.23{dimensionless}*exp(-(V+2.5{millivolt})/150{millivolt}));
    alpha_Na13 = 3.802{per_millisecond}/(0.1027{dimensionless}*exp(-(V+2.5{millivolt})/12{millivolt})+0.25{dimensionless}*exp(-(V+2.5{millivolt})/150{millivolt}));
    beta_Na11 = 0.1917{per_millisecond}*exp(-(V+2.5{millivolt})/20.3{millivolt});
    beta_Na12 = 0.2{per_millisecond}*exp(-(V-2.5{millivolt})/20.3{millivolt});
    beta_Na13 = 0.22{per_millisecond}*exp(-(V-7.5{millivolt})/20.3{millivolt});
    alpha_Na3 = 7e-7{per_millisecond}*exp(-(V+7{millivolt})/7.7{millivolt});
    beta_Na3 = 0.0084{per_millisecond}+0.00002{per_millivolt_millisecond}*(V+7{millivolt});
    alpha_Na2 = 1{per_millisecond}/(0.188495{dimensionless}*exp(-(V+7{millivolt})/16.6{millivolt})+0.393956{dimensionless});
    beta_Na2 = alpha_Na13*alpha_Na2*alpha_Na3/(beta_Na13*beta_Na3);
    alpha_Na4 = alpha_Na2/1000{dimensionless};
    beta_Na4 = alpha_Na3;
    alpha_Na5 = alpha_Na2/95000{dimensionless};
    beta_Na5 = alpha_Na3/50{dimensionless};
  enddef;

  def comp sodium_background_current as
    var i_Nab: picoA_per_picoF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.0026};
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_Nab = g_Nab*(V-E_Na);
  enddef;

  def comp potassium_concentration as
    var Ki: micromolar {init: 141474, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vmyo: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var Acap: cm2 {pub: in};
    var i_Kto_f: picoA_per_picoF {pub: in};
    var i_Kto_s: picoA_per_picoF {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_Kss: picoA_per_picoF {pub: in};
    var i_Kur: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Stim: picoA_per_picoF {pub: in};
    ode(Ki, time) = -(i_Stim+i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kss+i_Kur+i_Kr-2{dimensionless}*i_NaK)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp fast_transient_outward_K_I as
    var i_Kto_f: picoA_per_picoF {pub: out};
    var E_K: millivolt {pub: out};
    var g_Kto_f: milliS_per_microF {init: 0.4067};
    var ato_f: dimensionless {init: 0.001937245};
    var ito_f: dimensionless {init: 0.9999985};
    var alpha_a: per_millisecond;
    var beta_a: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Ki: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var time: millisecond {pub: in};
    i_Kto_f = g_Kto_f*pow(ato_f, 3{dimensionless})*ito_f*(V-E_K);
    E_K = R*T/F*ln(Ko/Ki);
    ode(ato_f, time) = alpha_a*(1{dimensionless}-ato_f)-beta_a*ato_f;
    ode(ito_f, time) = alpha_i*(1{dimensionless}-ito_f)-beta_i*ito_f;
    alpha_a = 0.18064{per_millisecond}*exp(0.03577{per_millivolt}*(V+30{millivolt}));
    beta_a = 0.3956{per_millisecond}*exp(-0.06237{per_millivolt}*(V+30{millivolt}));
    alpha_i = 0.000152{per_millisecond}*exp(-(V+13.5{millivolt})/7{millivolt})/(0.0067083{dimensionless}*exp(-(V+33.5{millivolt})/7{millivolt})+1{dimensionless});
    beta_i = 0.00095{per_millisecond}*exp((V+33.5{millivolt})/7{millivolt})/(0.051335{dimensionless}*exp((V+33.5{millivolt})/7{millivolt})+1{dimensionless});
  enddef;

  def comp slow_transient_outward_K_I as
    var i_Kto_s: picoA_per_picoF {pub: out};
    var ass: dimensionless {pub: out};
    var iss: dimensionless {pub: out};
    var g_Kto_s: milliS_per_microF {init: 0};
    var ato_s: dimensionless {init: 0.02000568};
    var ito_s: dimensionless {init: 0.9308568};
    var tau_ta_s: millisecond;
    var tau_ti_s: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_Kto_s = g_Kto_s*ato_s*ito_s*(V-E_K);
    ode(ato_s, time) = (ass-ato_s)/tau_ta_s;
    ode(ito_s, time) = (iss-ito_s)/tau_ti_s;
    ass = 1{dimensionless}/(1{dimensionless}+exp(-(V+22.5{millivolt})/7.7{millivolt}));
    iss = 1{dimensionless}/(1{dimensionless}+exp((V+45.2{millivolt})/5.7{millivolt}));
    tau_ta_s = 0.493{millisecond}*exp(-0.0629{per_millivolt}*V)+2.058{millisecond};
    tau_ti_s = 270{millisecond}+1050{millisecond}/(1{dimensionless}+exp((V+45.2{millivolt})/5.7{millivolt}));
  enddef;

  def comp time_independent_K_I as
    var i_K1: picoA_per_picoF {pub: out};
    var Ko: micromolar {pub: in};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var g_K1: milliS_per_microF {init: 0.2938};
    i_K1 = g_K1*Ko/(Ko+210{micromolar})*(V-E_K)/(1{dimensionless}+exp(0.0896{per_millivolt}*(V-E_K)));
  enddef;

  def comp slow_delayed_rectifier_K_I as
    var i_Ks: picoA_per_picoF {pub: out};
    var g_Ks: milliS_per_microF {init: 0.00575};
    var nKs: dimensionless {init: 0.002206261};
    var alpha_n: per_millisecond;
    var beta_n: per_millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_Ks = g_Ks*sqr(nKs)*(V-E_K);
    ode(nKs, time) = alpha_n*(1{dimensionless}-nKs)-beta_n*nKs;
    alpha_n = 0.00000481333{per_millivolt_millisecond}*(V+26.5{millivolt})/(1{dimensionless}-exp(-0.128{per_millivolt}*(V+26.5{millivolt})));
    beta_n = 0.0000953333{per_millisecond}*exp(-0.038{per_millivolt}*(V+26.5{millivolt}));
  enddef;

  def comp ultra_rapidly_activating_delayed_rectifier_K_I as
    var i_Kur: picoA_per_picoF {pub: out};
    var g_Kur: milliS_per_microF {init: 0.16};
    var aur: dimensionless {init: 0.02000568};
    var iur: dimensionless {init: 0.9822006};
    var tau_aur: millisecond;
    var tau_iur: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var ass: dimensionless {pub: in};
    var iss: dimensionless {pub: in};
    i_Kur = g_Kur*aur*iur*(V-E_K);
    ode(aur, time) = (ass-aur)/tau_aur;
    ode(iur, time) = (iss-iur)/tau_iur;
    tau_aur = 0.493{millisecond}*exp(-0.0629{per_millivolt}*V)+2.058{millisecond};
    tau_iur = 1200{millisecond}-170{millisecond}/(1{dimensionless}+exp((V+45.2{millivolt})/5.7{millivolt}));
  enddef;

  def comp non_inactivating_steady_state_K_I as
    var i_Kss: picoA_per_picoF {pub: out};
    var g_Kss: milliS_per_microF {init: 0.05};
    var aKss: dimensionless {init: 0.8883113};
    var iKss: dimensionless {init: 1};
    var tau_Kss: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var ass: dimensionless {pub: in};
    i_Kss = g_Kss*aKss*iKss*(V-E_K);
    ode(aKss, time) = (ass-aKss)/tau_Kss;
    ode(iKss, time) = 0{per_millisecond};
    tau_Kss = 39.3{millisecond}*exp(-0.0862{per_millivolt}*V)+13.17{millisecond};
  enddef;

  def comp rapid_delayed_rectifier_K_I as
    var i_Kr: picoA_per_picoF {pub: out};
    var g_Kr: milliS_per_microF {init: 0.078};
    var O_K: dimensionless {init: 0.0004858865};
    var C_K1: dimensionless {init: 0.0007799137};
    var C_K2: dimensionless {init: 0.0005301217};
    var C_K0: dimensionless;
    var I_K: dimensionless {init: 0.00007519518};
    var alpha_a0: per_millisecond;
    var beta_a0: per_millisecond;
    var kb: per_millisecond {init: 0.036778};
    var kf: per_millisecond {init: 0.023761};
    var alpha_a1: per_millisecond;
    var beta_a1: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nao: micromolar {pub: in};
    var Nai: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var Ki: micromolar {pub: in};
    i_Kr = g_Kr*O_K*(V-R*T/F*ln((0.98{dimensionless}*Ko+0.02{dimensionless}*Nao)/(0.98{dimensionless}*Ki+0.02{dimensionless}*Nai)));
    C_K0 = 1{dimensionless}-(C_K1+C_K2+O_K+I_K);
    ode(C_K2, time) = kf*C_K1+beta_a1*O_K-(kb*C_K2+alpha_a1*C_K2);
    ode(C_K1, time) = alpha_a0*C_K0+kb*C_K2-(beta_a0*C_K1+kf*C_K1);
    ode(O_K, time) = alpha_a1*C_K2+beta_i*I_K-(beta_a1*O_K+alpha_i*O_K);
    ode(I_K, time) = alpha_i*O_K-beta_i*I_K;
    alpha_a0 = 0.022348{per_millisecond}*exp(0.01176{per_millivolt}*V);
    beta_a0 = 0.047002{per_millisecond}*exp(-0.0631{per_millivolt}*V);
    alpha_a1 = 0.013733{per_millisecond}*exp(0.038198{per_millivolt}*V);
    beta_a1 = 0.0000689{per_millisecond}*exp(-0.04178{per_millivolt}*V);
    alpha_i = 0.090821{per_millisecond}*exp(0.023391{per_millivolt}*(V+5{millivolt}));
    beta_i = 0.006497{per_millisecond}*exp(-0.03268{per_millivolt}*(V+5{millivolt}));
  enddef;

  def comp sodium_potassium_pump_current as
    var i_NaK: picoA_per_picoF {pub: out};
    var i_NaK_max: picoA_per_picoF {init: 1.66};
    var Km_Nai: micromolar {init: 21000};
    var Km_Ko: micromolar {init: 1500};
    var f_NaK: dimensionless;
    var sigma: dimensionless;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    i_NaK = i_NaK_max*f_NaK*1{dimensionless}/(1{dimensionless}+pow(Km_Nai/Nai, 1.5{dimensionless}))*Ko/(Ko+Km_Ko);
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67300{micromolar})-1{dimensionless});
  enddef;

  def comp calcium_activated_chloride_current as
    var i_ClCa: picoA_per_picoF {pub: out};
    var g_ClCa: milliS_per_microF {init: 10};
    var O_ClCa: dimensionless;
    var E_Cl: millivolt {init: -40};
    var Km_Cl: micromolar {init: 10};
    var V: millivolt {pub: in};
    var Cai: micromolar {pub: in};
    i_ClCa = g_ClCa*O_ClCa*Cai/(Cai+Km_Cl)*(V-E_Cl);
    O_ClCa = 0.2{dimensionless}/(1{dimensionless}+exp(-(V-46.7{millivolt})/7.8{millivolt}));
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def group as containment for
    comp membrane incl
      comp transmembrane_currents incl
        comp L_type_calcium_current;
        comp calcium_pump_current;
        comp sodium_calcium_exchange_current;
        comp calcium_background_current;
        comp fast_sodium_current;
        comp sodium_background_current;
        comp fast_transient_outward_K_I;
        comp slow_transient_outward_K_I;
        comp time_independent_K_I;
        comp slow_delayed_rectifier_K_I;
        comp ultra_rapidly_activating_delayed_rectifier_K_I;
        comp non_inactivating_steady_state_K_I;
        comp rapid_delayed_rectifier_K_I;
        comp sodium_potassium_pump_current;
        comp calcium_activated_chloride_current;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp calcium_concentration;
        comp sodium_concentration;
        comp potassium_concentration;
      endcomp;
      comp intracellular_currents incl
        comp ryanodine_receptors;
        comp calcium_fluxes;
      endcomp;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes and environment for
    vars time and time;
  enddef;
  def map between ryanodine_receptors and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between fast_transient_outward_K_I and environment for
    vars time and time;
  enddef;
  def map between slow_transient_outward_K_I and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_K_I and environment for
    vars time and time;
  enddef;
  def map between time_independent_K_I and environment for
    vars time and time;
  enddef;
  def map between ultra_rapidly_activating_delayed_rectifier_K_I and environment for
    vars time and time;
  enddef;
  def map between non_inactivating_steady_state_K_I and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_K_I and environment for
    vars time and time;
  enddef;
  def map between membrane and L_type_calcium_current for
    vars i_CaL and i_CaL;
    vars V and V;
    vars F and F;
    vars T and T;
    vars Vss and Vss;
    vars Acap and Acap;
    vars R and R;
    vars Cm and Cm;
    vars Cao and Cao;
  enddef;
  def map between membrane and calcium_pump_current for
    vars i_pCa and i_pCa;
    vars F and F;
    vars Vmyo and Vmyo;
    vars Acap and Acap;
    vars Cm and Cm;
  enddef;
  def map between membrane and sodium_calcium_exchange_current for
    vars i_NaCa and i_NaCa;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Vmyo and Vmyo;
    vars Acap and Acap;
    vars Cm and Cm;
  enddef;
  def map between membrane and calcium_background_current for
    vars i_Cab and i_Cab;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
    vars Vmyo and Vmyo;
    vars Acap and Acap;
    vars Cm and Cm;
  enddef;
  def map between membrane and fast_sodium_current for
    vars i_Na and i_Na;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between membrane and sodium_background_current for
    vars i_Nab and i_Nab;
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between membrane and fast_transient_outward_K_I for
    vars i_Kto_f and i_Kto_f;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
  enddef;
  def map between membrane and slow_transient_outward_K_I for
    vars i_Kto_s and i_Kto_s;
    vars V and V;
  enddef;
  def map between membrane and time_independent_K_I for
    vars i_K1 and i_K1;
    vars V and V;
    vars Ko and Ko;
  enddef;
  def map between membrane and slow_delayed_rectifier_K_I for
    vars i_Ks and i_Ks;
    vars V and V;
  enddef;
  def map between membrane and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars i_Kur and i_Kur;
    vars V and V;
  enddef;
  def map between membrane and non_inactivating_steady_state_K_I for
    vars i_Kss and i_Kss;
    vars V and V;
  enddef;
  def map between membrane and rapid_delayed_rectifier_K_I for
    vars i_Kr and i_Kr;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between membrane and calcium_activated_chloride_current for
    vars i_ClCa and i_ClCa;
    vars V and V;
  enddef;
  def map between membrane and calcium_concentration for
    vars Cm and Cm;
    vars V and V;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars VNSR and VNSR;
    vars VJSR and VJSR;
    vars Vss and Vss;
    vars F and F;
  enddef;
  def map between membrane and calcium_fluxes for
    vars V and V;
  enddef;
  def map between membrane and sodium_concentration for
    vars Cm and Cm;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars F and F;
  enddef;
  def map between membrane and potassium_concentration for
    vars Cm and Cm;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars F and F;
    vars i_Stim and i_Stim;
  enddef;
  def map between calcium_concentration and calcium_fluxes for
    vars Cass and Cass;
    vars CaJSR and CaJSR;
    vars Cai and Cai;
    vars CaNSR and CaNSR;
    vars J_rel and J_rel;
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
    vars J_leak and J_leak;
    vars J_serca and J_serca;
  enddef;
  def map between calcium_concentration and ryanodine_receptors for
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and L_type_calcium_current for
    vars i_CaL and i_CaL;
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and calcium_pump_current for
    vars i_pCa and i_pCa;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and sodium_calcium_exchange_current for
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and calcium_background_current for
    vars i_Cab and i_Cab;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and calcium_activated_chloride_current for
    vars Cai and Cai;
  enddef;
  def map between calcium_fluxes and L_type_calcium_current for
    vars i_CaL_max and i_CaL_max;
    vars i_CaL and i_CaL;
  enddef;
  def map between calcium_fluxes and ryanodine_receptors for
    vars P_O1 and P_O1;
    vars P_O2 and P_O2;
  enddef;
  def map between sodium_concentration and fast_sodium_current for
    vars Nai and Nai;
    vars i_Na and i_Na;
  enddef;
  def map between sodium_concentration and sodium_background_current for
    vars i_Nab and i_Nab;
  enddef;
  def map between sodium_concentration and sodium_calcium_exchange_current for
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sodium_concentration and sodium_potassium_pump_current for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between potassium_concentration and fast_transient_outward_K_I for
    vars Ki and Ki;
    vars i_Kto_f and i_Kto_f;
  enddef;
  def map between potassium_concentration and slow_transient_outward_K_I for
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between potassium_concentration and time_independent_K_I for
    vars i_K1 and i_K1;
  enddef;
  def map between potassium_concentration and slow_delayed_rectifier_K_I for
    vars i_Ks and i_Ks;
  enddef;
  def map between potassium_concentration and rapid_delayed_rectifier_K_I for
    vars i_Kr and i_Kr;
    vars Ki and Ki;
  enddef;
  def map between sodium_concentration and rapid_delayed_rectifier_K_I for
    vars Nai and Nai;
  enddef;
  def map between potassium_concentration and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars i_Kur and i_Kur;
  enddef;
  def map between potassium_concentration and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
  enddef;
  def map between potassium_concentration and non_inactivating_steady_state_K_I for
    vars i_Kss and i_Kss;
  enddef;
  def map between fast_transient_outward_K_I and slow_transient_outward_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and time_independent_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and slow_delayed_rectifier_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and non_inactivating_steady_state_K_I for
    vars E_K and E_K;
  enddef;
  def map between slow_transient_outward_K_I and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars ass and ass;
    vars iss and iss;
  enddef;
  def map between slow_transient_outward_K_I and non_inactivating_steady_state_K_I for
    vars ass and ass;
  enddef;
enddef;
// #MyModel_2006
// simulation: pointDensity 10000; maximumStepSize 0.01; endingValue 1000
