// This CellML file was generated on 18/04/2008 at 09:15:12 using:
//
// COR (0.9.31.915)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; This model has been curated by Penny Noble and is known to run in PCEnv and COR and reproduce the published results.
// created: W3CDTF 2007-10-23T00:00:00+00:00
// creator: Orgname Oxford University; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-10-30T11:57:22+13:00; Removed initial value for variable Vm_old, removing model overconstraint problem in PCEnv.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2008-02-25T11:29:40+13:00; units checked, curated; Given Penny; Family Noble; Other J
// simulation: endingValue 2000; nonstandard-pointDensity 10000; maximumStepSize 0.1
// reference: Given Satoshi; Family Matsuoka; Given Nobuaki; Family Sarai; Given Shinobu; Family Kuratomi; Given Kyoichi; Family Ono; Given Akinori; Family Noma; title Role of individual ionic current systems in ventricular cells hypothesized by a model study; volume 53(2); first_page 105; title Japanese Journal of Physiology; W3CDTF 2003-01-01 00:00; last_page 123
// reference: subject_type keyword; cardiac; ventricular myocyte; electrophysiology
// comment: FN James Lawson; This file is a CellML description of Matsuoka et al's 2003 mathematical model of the roles of individual ion currents in ventricular cells.
def model matsuoka_sarai_kuratomi_ono_noma_2003 as
  // Modelling the Roles of Individual Current Systems in Ventricular Cells and in the SA Node
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model has been curated and unit checked by Alan Garny in collaboration with the model authors and it is known to run in COR to reproduce the published results. It also works in JSim as long as the stimulus protocol is altered.
  //
  // Model Structure
  //
  // Different types of ion channel, with their distinct gating and conductance properties, play a unique role in generating membrane excitation. Although the behaviours of single ion channels have been extensively studied experimentally, ionic current interactions make it difficult to deduce their individual roles in membrane excitability. In order to better understand the roles of the individual ion currents, Satoshi Matsuoka et al. have developed a mathematical model of membrane excitation for the ventricular cell.
  //
  // The Matsuoka et al. mathematical model is a development of previously published cardiac cellular models. The group's general approach to modelling was based on the methods used in the Difrancesco-Noble, 1985 Model and the Luo-Rudy Ventricular Model II (dynamic), 1994. In addition, the compound Kyoto Model of Matsuoka et al. incorporates the Negroni and Lascano (1996) model of cardiac muscle contraction, allowing simulation of sarcomere shortening, and also, the gating model of Shirokov et al. is used for both the fast Na+ and L-type Ca2+ channels.
  //
  // New experimental data are included, such as new kinetics of the inward rectifier K+ channel, the delayed rectifier K+ channel, and the sustained inward current (for more details on the reaction kinetics, see figure 3 below). Model simulations showed that ion conductance by the L-type Ca2+ channel (ICaL) dominates the membrane conductance during the action potential. Repolarisation occurs as the following currents are sequentially activated: IKs; IKr; and IK1. Agreement between model simulation results and experimental data was taken as supporting evidence for the validity of the model.
  //
  // The complete original paper reference is cited below:
  //
  // Role of Individual Ionic Current Systems in Ventricular Cells Hypothesized by a Model Study, Matsuoka S, Sarai N, Kuratomi S, Ono K, and Noma A, 2003, The Japanese Journal of Physiology, 53, 105-123. PubMed ID: 12877767 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12877767&dopt=Abstract)
  //
  // ventricular cell diagram
  //
  // A schematic diagram describing the ionic components of the Matsuoka et al. 2003 ventricular cell mathematical model. Ions are exchanged between the intracellular and extracellular environments, and between the cytosol and the sarcoplasmic reticulum (SR) via channels and pumps. Unique to the ventricular cells are the transient outward current, Ito, and the slow component of the delayed rectifier K+ current, IKs.
  //
  // reaction kinetics diagram
  //
  // A schematic diagram describing the reaction kinetics of the ion channel gates in the Matsuoka et al. 2003 mathematical models. A) The kinetics of the sodium channel voltage-dependent gate. B) The kinetics of the Na-Ca exchange pump. C) The kinetics of the Na-K pump. D) The kinetics of the inward rectifier K+ current. E) The kinetics of the Ca2+-dependent gate of the L-type Ca2+ channel. F) The kinetics of the ultra-slow gates of several ion channels. G) The kinetics of the SR Ca2+ pump. H) The kinetics of the hyperpolarisation-activated cation current. I) The kinetics of the RyR channel in the SR.
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit millimole as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar2 as
    unit millimolar {expo: 2};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar_per_picoA as
    unit millimolar;
    unit picoA {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_micromolar2 as
    unit micromolar {expo: -2};
  enddef;
  def unit second_per_micromolar2 as
    unit second;
    unit micromolar {expo: -2};
  enddef;
  def unit millisecond_per_micrometre2 as
    unit millisecond;
    unit micrometre {expo: -2};
  enddef;
  def unit mN_per_mm2 as
    unit newton {pref: milli};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit mN_per_mm2_micrometre as
    unit mN_per_mm2;
    unit micrometre {expo: -1};
  enddef;
  def unit mN_per_mm2_micrometre5 as
    unit mN_per_mm2;
    unit micrometre {expo: -5};
  enddef;
  def unit mN_per_mm2_micrometre_millimolar as
    unit newton {pref: milli};
    unit metre {expo: -2, pref: milli};
    unit micrometre {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit per_micrometre2 as
    unit micrometre {expo: -2};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit micromolar_per_second as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit picoF_per_millisecond as
    unit picoF;
    unit millisecond {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit per_picoA_millisecond as
    unit picoA {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre_per_millisecond as
    unit micrometre;
    unit millisecond {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit nanoS_per_picoF as
    unit nanoS;
    unit picoF {expo: -1};
  enddef;
  def unit picoA_per_picoF as
    unit picoA;
    unit picoF {expo: -1};
  enddef;
  def unit nanoS_per_millimolar as
    unit nanoS;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA_per_millimolar as
    unit ampere {pref: pico};
    unit millimolar {expo: -1};
  enddef;
  def unit coulomb_millivolt_per_kelvin_millimole as
    unit coulomb;
    unit millivolt;
    unit kelvin {expo: -1};
    unit millimole {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var Vm: millivolt {init: -85.95752434460744, pub: out};
    var R: coulomb_millivolt_per_kelvin_millimole {init: 8.3143, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_millimole {init: 96.4867, pub: out};
    var Cm: picoF {init: 132, pub: out};
    var i_ext: picoA {pub: out};
    var i_tot: picoA;
    var i_I: picoA;
    var time: millisecond {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_Ca_T: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_bNSC: picoA {pub: in};
    var i_Cab: picoA {pub: in};
    var i_Kpl: picoA {pub: in};
    var i_lCa: picoA {pub: in};
    var i_KATP: picoA {pub: in};
    var stim_start: millisecond {init: 50};
    var stim_end: millisecond {init: 1000000};
    var stim_period: millisecond {init: 400};
    var stim_duration: millisecond {init: 2};
    var stim_amplitude: picoA {init: -4000};
    i_ext = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA};
    endsel;
    ode(Vm, time) = -(i_tot+i_ext)/Cm;
    i_tot = i_Na+i_Ca_L+i_Ca_T+i_K1+i_Kr+i_Ks+i_to+i_I+i_NaK+i_NaCa;
    i_I = i_bNSC+i_Cab+i_Kpl+i_lCa+i_KATP;
  enddef;

  def comp external_ion_concentrations as
    var Nao: millimolar {init: 140, pub: out};
    var Cao: millimolar {init: 1.8, pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
  enddef;

  def comp internal_ion_concentrations as
    var Nai: millimolar {init: 4.925761439682025, pub: out};
    var Cai: millimolar {pub: out};
    var Ki: millimolar {init: 143.1837333000449, pub: out};
    var Vi: micrometre3 {init: 8000, pub: out};
    var i_net_Na: picoA;
    var i_net_K: picoA;
    var i_net_Ca: picoA;
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_Na_Na: picoA {pub: in};
    var i_CaL_Na: picoA {pub: in};
    var i_bNSC_Na: picoA {pub: in};
    var i_lCa_Na: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_to_K: picoA {pub: in};
    var i_to_Na: picoA {pub: in};
    var i_Ks_K: picoA {pub: in};
    var i_Ks_Na: picoA {pub: in};
    var i_KATP: picoA {pub: in};
    var i_Na_K: picoA {pub: in};
    var i_CaL_K: picoA {pub: in};
    var i_bNSC_K: picoA {pub: in};
    var i_lCa_K: picoA {pub: in};
    var i_Kpl: picoA {pub: in};
    var i_CaL_Ca: picoA {pub: in};
    var i_Ca_T: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_bNSC: picoA {pub: in};
    var i_Cab: picoA {pub: in};
    var i_ext: picoA {pub: in};
    var i_RyR: picoA {pub: in};
    var i_SR_U: picoA {pub: in};
    var i_SR_L: picoA {pub: in};
    var dCaidt_NL: millimolar_per_millisecond {pub: in};
    var CMDN_max: millimolar {init: 0.05};
    var K_mCMDN: millimolar {init: 0.00238};
    var Ca_Total: millimolar {init: 4.0180173572968586e-4};
    var b1: millimolar;
    var c1: millimolar2;
    b1 = CMDN_max-Ca_Total+K_mCMDN;
    c1 = K_mCMDN*Ca_Total;
    Cai = (sqrt(sqr(b1)+4{dimensionless}*c1)-b1)/2{dimensionless};
    ode(Nai, time) = -i_net_Na/(F*Vi);
    ode(Ki, time) = -(i_net_K+i_ext)/(F*Vi);
    ode(Ca_Total, time) = -(i_net_Ca-i_SR_U-i_RyR-i_SR_L)/(2{dimensionless}*F*Vi)+dCaidt_NL;
    i_net_Na = i_Na_Na+i_Ks_Na+i_to_Na+i_CaL_Na+i_bNSC_Na+i_lCa_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa;
    i_net_K = i_K1+i_Kr+i_to_K+i_KATP+i_Ks_K+i_Na_K+i_CaL_K+i_bNSC_K+i_lCa_K+i_Kpl-2{dimensionless}*i_NaK;
    i_net_Ca = i_CaL_Ca+i_Ca_T+i_Cab-2{dimensionless}*i_NaCa;
  enddef;

  def comp constant_field_equations as
    var CF_Na: millimolar {pub: out};
    var CF_Ca: millimolar {pub: out};
    var CF_K: millimolar {pub: out};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var R: coulomb_millivolt_per_kelvin_millimole {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vm: millivolt {pub: in};
    CF_Na = sel
      case Vm == 0{millivolt}:
        -Nao;
      otherwise:
        F*Vm/(R*T)*(Nai-Nao*exp(-F*Vm/(R*T)))/(1{dimensionless}-exp(-F*Vm/(R*T)));
    endsel;
    CF_Ca = sel
      case Vm == 0{millivolt}:
        -Cao;
      otherwise:
        2{dimensionless}*F*Vm/(R*T)*(Cai-Cao*exp(-2{dimensionless}*F*Vm/(R*T)))/(1{dimensionless}-exp(-2{dimensionless}*F*Vm/(R*T)));
    endsel;
    CF_K = sel
      case Vm == 0{millivolt}:
        Ki;
      otherwise:
        F*Vm/(R*T)*(Ki-Ko*exp(-F*Vm/(R*T)))/(1{dimensionless}-exp(-F*Vm/(R*T)));
    endsel;
  enddef;

  def comp ATP_production as
    var ATPi: millimolar {init: 4.657102729020499, pub: out};
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    var dATPdt_NL: millimolar_per_millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vi: micrometre3 {pub: in};
    var i_NaK: picoA {pub: in};
    var i_SR_U: picoA {pub: in};
    var ProducingRate_Max: per_millisecond {init: 0.003};
    var Adenosine_Total: millimolar {init: 5};
    ode(ATPi, time) = ProducingRate_Max*(Adenosine_Total-ATPi)+dATPdt_NL-i_NaK/(F*Vi)+i_SR_U/(4{dimensionless}*F*Vi);
  enddef;

  def comp sodium_current as
    var i_Na: picoA {pub: out};
    var i_Na_Na: picoA {pub: out};
    var i_Na_K: picoA {pub: out};
    var P_Na: picoA_per_millimolar {init: 2860};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var CF_Na: millimolar {pub: in};
    var CF_K: millimolar {pub: in};
    var p_AP_Na: dimensionless {priv: in};
    var y: dimensionless {priv: in};
    i_Na = i_Na_Na+i_Na_K;
    i_Na_Na = P_Na*CF_Na*p_AP_Na*y;
    i_Na_K = 0.1{dimensionless}*P_Na*CF_K*p_AP_Na*y;
  enddef;

  def comp sodium_current_voltage_dependent_gate as
    var p_AP_Na: dimensionless {init: 1.779648367445368e-5, pub: out};
    var p_RI_Na: dimensionless;
    var p_RP_Na: dimensionless {init: 0.3556412697995689};
    var p_AI_Na: dimensionless {init: 0.40285968661346977};
    var k_RP_AP: per_millisecond;
    var k_AP_RP: per_millisecond;
    var k_RI_AI: per_millisecond;
    var k_AI_RI: per_millisecond;
    var k_AP_AI: per_millisecond;
    var k_AI_AP: per_millisecond {init: 0.0000875};
    var k_RP_RI: per_millisecond;
    var k_RI_RP: per_millisecond;
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    ode(p_RP_Na, time) = p_AP_Na*k_AP_RP+p_RI_Na*k_RI_RP-p_RP_Na*(k_RP_RI+k_RP_AP);
    ode(p_AP_Na, time) = p_RP_Na*k_RP_AP+p_AI_Na*k_AI_AP-p_AP_Na*(k_AP_RP+k_AP_AI);
    ode(p_AI_Na, time) = p_RI_Na*k_RI_AI+p_AP_Na*k_AP_AI-p_AI_Na*(k_AI_RI+k_AI_AP);
    p_RI_Na = 1{dimensionless}-p_RP_Na-p_AP_Na-p_AI_Na;
    k_RP_AP = 1{per_millisecond}/(0.1027{dimensionless}*exp(-Vm/8{millivolt})+0.25{dimensionless}*exp(-Vm/50{millivolt}));
    k_AP_RP = 1{per_millisecond}/(26{dimensionless}*exp(Vm/17{millivolt})+0.02{dimensionless}*exp(Vm/800{millivolt}));
    k_AP_AI = 1{per_millisecond}/(0.8{dimensionless}*exp(-Vm/400{millivolt}));
    k_AI_RI = 1{per_millisecond}/(1300{dimensionless}*exp(Vm/20{millivolt})+0.04{dimensionless}*exp(Vm/800{millivolt}));
    k_RI_AI = 1{per_millisecond}/(0.0001027{dimensionless}*exp(-Vm/8{millivolt})+5{dimensionless}*exp(-Vm/400{millivolt}));
    k_RP_RI = 0.01{per_millisecond}/(1{dimensionless}+k_AI_AP*k_AP_RP*k_RI_AI/(k_AP_AI*k_RP_AP*k_AI_RI));
    k_RI_RP = 0.01{per_millisecond}-k_RP_RI;
  enddef;

  def comp sodium_current_ultra_slow_gate as
    var y: dimensionless {init: 0.5861887862983165, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y = 1{per_millisecond}/(9000000000{dimensionless}*exp(Vm/5{millivolt})+8000{dimensionless}*exp(Vm/100{millivolt}));
    beta_y = 1{per_millisecond}/(0.014{dimensionless}*exp(-Vm/5{millivolt})+4000{dimensionless}*exp(-Vm/100{millivolt}));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: picoA {pub: out};
    var i_CaL_Na: picoA {pub: out};
    var i_CaL_Ca: picoA {pub: out};
    var i_CaL_K: picoA {pub: out};
    var p_open_CaL: dimensionless {priv: out, pub: out};
    var CaDiadic: picoA {priv: in, pub: out};
    var P_CaL: picoA_per_millimolar {init: 8712};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var CF_Na: millimolar {pub: in};
    var CF_Ca: millimolar {priv: out, pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var CF_K: millimolar {pub: in};
    var ATPi: millimolar {pub: in};
    var p_AP_CaL: dimensionless {priv: in};
    var p_U: dimensionless {priv: in};
    var p_UCa: dimensionless {priv: in};
    var y: dimensionless {priv: in};
    i_Ca_L = i_CaL_Na+i_CaL_Ca+i_CaL_K;
    i_CaL_Ca = P_CaL*CF_Ca*p_open_CaL;
    i_CaL_Na = 0.0000185{dimensionless}*P_CaL*CF_Na*p_open_CaL;
    i_CaL_K = 0.000365{dimensionless}*P_CaL*CF_K*p_open_CaL;
    p_open_CaL = p_AP_CaL*(p_U+p_UCa)*y/(1{dimensionless}+pow(1.4{millimolar}/ATPi, 3{dimensionless}));
  enddef;

  def comp L_type_Ca_channel_voltage_dependent_gate as
    var p_AP_CaL: dimensionless {init: 1.5445004166497696e-6, pub: out};
    var p_RI_CaL: dimensionless;
    var p_RP_CaL: dimensionless {init: 0.9968480629364956};
    var p_AI_CaL: dimensionless {init: 8.77325391245903e-4};
    var k_RP_AP: per_millisecond;
    var k_AP_RP: per_millisecond;
    var k_RI_AI: per_millisecond;
    var k_AI_RI: per_millisecond;
    var k_AP_AI: per_millisecond {init: 0.004};
    var k_AI_AP: per_millisecond {init: 0.001};
    var k_RP_RI: per_millisecond;
    var k_RI_RP: per_millisecond;
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    ode(p_RP_CaL, time) = p_AP_CaL*k_AP_RP+p_RI_CaL*k_RI_RP-p_RP_CaL*(k_RP_RI+k_RP_AP);
    ode(p_AP_CaL, time) = p_RP_CaL*k_RP_AP+p_AI_CaL*k_AI_AP-p_AP_CaL*(k_AP_RP+k_AP_AI);
    ode(p_AI_CaL, time) = p_RI_CaL*k_RI_AI+p_AP_CaL*k_AP_AI-p_AI_CaL*(k_AI_RI+k_AI_AP);
    p_RI_CaL = 1{dimensionless}-p_AP_CaL-p_RP_CaL-p_AI_CaL;
    k_RP_AP = 1{per_millisecond}/(0.27{dimensionless}*exp(-Vm/5.9{millivolt})+1.5{dimensionless}*exp(-Vm/65{millivolt}));
    k_AP_RP = 1{per_millisecond}/(480{dimensionless}*exp(Vm/7{millivolt})+2.2{dimensionless}*exp(Vm/65{millivolt}));
    k_RI_AI = 1{per_millisecond}/(0.0018{dimensionless}*exp(-Vm/7.4{millivolt})+2{dimensionless}*exp(-Vm/100{millivolt}));
    k_AI_RI = 1{per_millisecond}/(2200000{dimensionless}*exp(Vm/7.4{millivolt})+11{dimensionless}*exp(Vm/100{millivolt}));
    k_RP_RI = 0.04{per_millisecond}/(1{dimensionless}+k_AI_AP*k_AP_RP*k_RI_AI/(k_AP_AI*k_RP_AP*k_AI_RI));
    k_RI_RP = 0.04{per_millisecond}-k_RP_RI;
  enddef;

  def comp L_type_Ca_channel_Ca_dependent_gate as
    var p_U: dimensionless {init: 0.17246483915629204, pub: out};
    var p_UCa: dimensionless {init: 6.098246017787626e-5, pub: out};
    var iCaL: picoA;
    var Cacm: millimolar;
    var p_CCa: dimensionless;
    var p_C: dimensionless {init: 0.4250747299372254};
    var k_CCa_UCa: per_millisecond {init: 0.0003};
    var k_UCa_CCa: per_millisecond {init: 0.35};
    var k_C_U: per_millisecond {init: 0.143};
    var k_U_C: per_millisecond {init: 0.35};
    var k_UCa_U: per_millisecond;
    var k_U_UCa: per_millimolar_millisecond {init: 6.954};
    var k_CCa_C: per_millisecond {init: 0.0042};
    var k_C_CCa: per_millimolar_millisecond {init: 6.954};
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var CF_Ca: millimolar {pub: in};
    var p_AP_CaL: dimensionless {pub: in};
    var CaEffC: millimolar;
    var CaEffU: millimolar;
    var k_UUCa_Ca: per_millisecond;
    var k_CCCa_Ca: per_millisecond;
    var CaDiadic: picoA {pub: out};
    var p_open_CaL: dimensionless {pub: in};
    iCaL = 0.0676{picoA_per_millimolar}*CF_Ca;
    CaDiadic = iCaL*p_open_CaL;
    Cacm = Cai-0.3{millimolar_per_picoA}*iCaL;
    CaEffC = Cacm*p_AP_CaL;
    CaEffU = CaEffC+Cai*(1{dimensionless}-p_AP_CaL);
    k_UUCa_Ca = k_U_UCa*CaEffU;
    k_CCCa_Ca = k_C_CCa*CaEffC;
    ode(p_U, time) = p_C*k_C_U+p_UCa*k_UCa_U-p_U*(k_UUCa_Ca+k_U_C);
    ode(p_UCa, time) = p_U*k_UUCa_Ca+p_CCa*k_CCa_UCa-p_UCa*(k_UCa_CCa+k_UCa_U);
    ode(p_C, time) = p_CCa*k_CCa_C+p_U*k_U_C-p_C*(k_C_U+k_C_CCa*Cacm*p_AP_CaL);
    p_CCa = 1{dimensionless}-p_C-p_U-p_UCa;
    k_UCa_U = k_CCa_C*k_C_U*k_U_UCa*k_UCa_CCa/(k_U_C*k_C_CCa*k_CCa_UCa);
  enddef;

  def comp L_type_Ca_channel_ultra_slow_gate as
    var y: dimensionless {init: 0.9985266538252986, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y = 1{per_millisecond}/(250000{dimensionless}*exp(Vm/9{millivolt})+58{dimensionless}*exp(Vm/65{millivolt}));
    beta_y = 1{per_millisecond}/(1800{dimensionless}*exp(-Vm/14{millivolt})+66{dimensionless}*exp(-Vm/65{millivolt}));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp T_type_Ca_channel as
    var i_Ca_T: picoA {pub: out};
    var P_CaT: picoA_per_millimolar {init: 612};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var CF_Ca: millimolar {pub: in};
    var y1: dimensionless {priv: in};
    var y2: dimensionless {priv: in};
    i_Ca_T = P_CaT*CF_Ca*y1*y2;
  enddef;

  def comp T_type_Ca_channel_y1_gate as
    var y1: dimensionless {init: 1.6882718240109127e-5, pub: out};
    var alpha_y1: per_millisecond;
    var beta_y1: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y1 = 1{per_millisecond}/(0.019{dimensionless}*exp(-Vm/5.6{millivolt})+0.82{dimensionless}*exp(-Vm/250{millivolt}));
    beta_y1 = 1{per_millisecond}/(40{dimensionless}*exp(Vm/6.3{millivolt})+1.5{dimensionless}*exp(Vm/10000{millivolt}));
    ode(y1, time) = alpha_y1*(1{dimensionless}-y1)-beta_y1*y1;
  enddef;

  def comp T_type_Ca_channel_y2_gate as
    var y2: dimensionless {init: 0.8585352091865849, pub: out};
    var alpha_y2: per_millisecond;
    var beta_y2: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y2 = 1{per_millisecond}/(62000{dimensionless}*exp(Vm/10.1{millivolt})+30{dimensionless}*exp(Vm/3000{millivolt}));
    beta_y2 = 1{per_millisecond}/(0.0006{dimensionless}*exp(-Vm/6.7{millivolt})+1.2{dimensionless}*exp(-Vm/25{millivolt}));
    ode(y2, time) = alpha_y2*(1{dimensionless}-y2)-beta_y2*y2;
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: picoA {pub: out};
    var E_K: millivolt {priv: out, pub: out};
    var g_K1: nanoS;
    var P_K1_0: nanoS_per_picoF {init: 1.146};
    var fO: dimensionless {priv: out};
    var fO2: dimensionless;
    var fO3: dimensionless;
    var fO4: dimensionless;
    var fB: dimensionless;
    var mu: per_millisecond;
    var lambda: per_millisecond;
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var Cm: picoF {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: coulomb_millivolt_per_kelvin_millimole {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var y: dimensionless {priv: in};
    i_K1 = g_K1*(Vm-E_K)*(fO4+fO3+fO2)*y;
    E_K = R*T/F*ln(Ko/Ki);
    g_K1 = P_K1_0*Cm*pow(Ko/5.4{millimolar}, 0.4{dimensionless});
    fB = mu/(mu+lambda);
    fO = lambda/(mu+lambda);
    fO2 = 2{dimensionless}*sqr(fO)*sqr(fB);
    fO3 = 8{dimensionless}/3{dimensionless}*pow(fO, 3{dimensionless})*fB;
    fO4 = pow(fO, 4{dimensionless});
    mu = 0.75{per_millisecond}*exp(0.035{per_millivolt}*(Vm-E_K-10{millivolt}))/(1{dimensionless}+exp(0.015{per_millivolt}*(Vm-E_K-140{millivolt})));
    lambda = 3{per_millisecond}*exp(-0.048{per_millivolt}*(Vm-E_K-10{millivolt}))*(1{dimensionless}+exp(0.064{per_millivolt}*(Vm-E_K-38{millivolt})))/(1{dimensionless}+exp(0.03{per_millivolt}*(Vm-E_K-70{millivolt})));
  enddef;

  def comp time_independent_potassium_current_y_gate as
    var y: dimensionless {init: 0.6080573900752752, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var fO: dimensionless {pub: in};
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y = 1{per_millisecond}/(8000{dimensionless}*exp((Vm-E_K-97{millivolt})/8.5{millivolt})+7{dimensionless}*exp((Vm-E_K-97{millivolt})/300{millivolt}));
    beta_y = pow(fO, 4{dimensionless})*1{per_millisecond}/(0.00014{dimensionless}*exp(-(Vm-E_K-97{millivolt})/9.1{millivolt})+0.2{dimensionless}*exp(-(Vm-E_K-97{millivolt})/500{millivolt}));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp rapid_time_dependent_potassium_current as
    var i_Kr: picoA {pub: out};
    var g_Kr: nanoS;
    var P_Kr: nanoS_per_picoF {init: 0.00864};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var Cm: picoF {pub: in};
    var E_K: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var y1: dimensionless {priv: in};
    var y2: dimensionless {priv: in};
    var y3: dimensionless {priv: in};
    i_Kr = g_Kr*(Vm-E_K)*(0.6{dimensionless}*y1+0.4{dimensionless}*y2)*y3;
    g_Kr = P_Kr*Cm*pow(Ko/5.4{millimolar}, 0.2{dimensionless});
  enddef;

  def comp rapid_time_dependent_potassium_current_y1_gate as
    var y1: dimensionless {init: 0.0018339931180983765, pub: out};
    var alpha_y1: per_millisecond;
    var beta_y1: per_millisecond;
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y1 = 1{per_millisecond}/(20{dimensionless}*exp(-Vm/11.5{millivolt})+5{dimensionless}*exp(-Vm/300{millivolt}));
    beta_y1 = 1{per_millisecond}/(160{dimensionless}*exp(Vm/28{millivolt})+200{dimensionless}*exp(Vm/1000{millivolt}))+1{per_millisecond}/(2500{dimensionless}*exp(Vm/20{millivolt}));
    ode(y1, time) = alpha_y1*(1{dimensionless}-y1)-beta_y1*y1;
  enddef;

  def comp rapid_time_dependent_potassium_current_y2_gate as
    var y2: dimensionless {init: 0.20443083454225305, pub: out};
    var alpha_y2: per_millisecond;
    var beta_y2: per_millisecond;
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y2 = 1{per_millisecond}/(200{dimensionless}*exp(-Vm/13{millivolt})+20{dimensionless}*exp(-Vm/300{millivolt}));
    beta_y2 = 1{per_millisecond}/(1600{dimensionless}*exp(Vm/28{millivolt})+2000{dimensionless}*exp(Vm/1000{millivolt}))+1{per_millisecond}/(10000{dimensionless}*exp(Vm/20{millivolt}));
    ode(y2, time) = alpha_y2*(1{dimensionless}-y2)-beta_y2*y2;
  enddef;

  def comp rapid_time_dependent_potassium_current_y3_gate as
    var y3: dimensionless {init: 0.967887666264921, pub: out};
    var alpha_y3: per_millisecond;
    var beta_y3: per_millisecond;
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y3 = 1{per_millisecond}/(10{dimensionless}*exp(Vm/17{millivolt})+2.5{dimensionless}*exp(Vm/300{millivolt}));
    beta_y3 = 1{per_millisecond}/(0.35{dimensionless}*exp(-Vm/17{millivolt})+2{dimensionless}*exp(-Vm/150{millivolt}));
    ode(y3, time) = alpha_y3*(1{dimensionless}-y3)-beta_y3*y3;
  enddef;

  def comp slow_time_dependent_potassium_current as
    var i_Ks: picoA {pub: out};
    var i_Ks_Na: picoA {pub: out};
    var i_Ks_K: picoA {pub: out};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var CF_K: millimolar {pub: in};
    var CF_Na: millimolar {pub: in};
    var y1: dimensionless {priv: in};
    var y2: dimensionless {priv: in};
    var P_Ks_K: picoA_per_millimolar {init: 5.04};
    var P_Ks_Na: picoA_per_millimolar {init: 0.2016};
    i_Ks = i_Ks_Na+i_Ks_K;
    i_Ks_K = P_Ks_K*CF_K*sqr(y1)*(0.9{dimensionless}*y2+0.1{dimensionless});
    i_Ks_Na = P_Ks_Na*CF_Na*sqr(y1)*(0.9{dimensionless}*y2+0.1{dimensionless});
  enddef;

  def comp slow_time_dependent_potassium_current_y1_gate as
    var y1: dimensionless {init: 0.09738789658609195, pub: out};
    var alpha_y1: per_millisecond;
    var beta_y1: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y1 = 1{per_millisecond}/(85{dimensionless}*exp(-Vm/10.5{millivolt})+370{dimensionless}*exp(-Vm/62{millivolt}));
    beta_y1 = 1{per_millisecond}/(1450{dimensionless}*exp(Vm/20{millivolt})+260{dimensionless}*exp(Vm/100{millivolt}));
    ode(y1, time) = alpha_y1*(1{dimensionless}-y1)-beta_y1*y1;
  enddef;

  def comp slow_time_dependent_potassium_current_y2_gate as
    var y2: dimensionless {init: 0.09745345578743213, pub: out};
    var alpha_y2: per_millisecond;
    var beta_y2: per_millisecond {init: 0.004444};
    var Cai: millimolar {pub: in};
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y2 = 3.7{per_millimolar_millisecond}*Cai;
    ode(y2, time) = alpha_y2*(1{dimensionless}-y2)-beta_y2*y2;
  enddef;

  def comp transient_outward_current as
    var i_to: picoA {pub: out};
    var i_to_Na: picoA {pub: out};
    var i_to_K: picoA {pub: out};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var CF_K: millimolar {pub: in};
    var CF_Na: millimolar {pub: in};
    var y1: dimensionless {priv: in};
    var y2: dimensionless {priv: in};
    var P_to_K: picoA_per_millimolar {init: 0.033};
    var P_to_Na: picoA_per_millimolar {init: 0.00297};
    i_to = i_to_Na+i_to_K;
    i_to_K = P_to_K*CF_K*pow(y1, 3{dimensionless})*y2;
    i_to_Na = P_to_Na*CF_Na*pow(y1, 3{dimensionless})*y2;
  enddef;

  def comp transient_outward_current_y1_gate as
    var y1: dimensionless {init: 7.956883250874798e-4, pub: out};
    var alpha_y1: per_millisecond;
    var beta_y1: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y1 = 1{per_millisecond}/(11{dimensionless}*exp(-Vm/28{millivolt})+0.2{dimensionless}*exp(-Vm/400{millivolt}));
    beta_y1 = 1{per_millisecond}/(4.4{dimensionless}*exp(Vm/16{millivolt})+0.2{dimensionless}*exp(Vm/500{millivolt}));
    ode(y1, time) = alpha_y1*(1{dimensionless}-y1)-beta_y1*y1;
  enddef;

  def comp transient_outward_current_y2_gate as
    var y2: dimensionless {init: 0.9999125083105881, pub: out};
    var alpha_y2: per_millisecond;
    var beta_y2: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y2 = 0.0038{per_millisecond}*exp(-(Vm+13.5{millivolt})/11.3{millivolt})/(1{dimensionless}+0.051335{dimensionless}*exp(-(Vm+13.5{millivolt})/11.3{millivolt}));
    beta_y2 = 0.0038{per_millisecond}*exp((Vm+13.5{millivolt})/11.3{millivolt})/(1{dimensionless}+0.067083{dimensionless}*exp((Vm+13.5{millivolt})/11.3{millivolt}));
    ode(y2, time) = alpha_y2*(1{dimensionless}-y2)-beta_y2*y2;
  enddef;

  def comp background_NSC_current as
    var i_bNSC: picoA {pub: out};
    var i_bNSC_Na: picoA {pub: out};
    var i_bNSC_K: picoA {pub: out};
    var P_bNSC: picoA_per_millimolar {init: 0.385};
    var time: millisecond {pub: in};
    var CF_K: millimolar {pub: in};
    var CF_Na: millimolar {pub: in};
    i_bNSC = i_bNSC_K+i_bNSC_Na;
    i_bNSC_K = 0.4{dimensionless}*P_bNSC*CF_K;
    i_bNSC_Na = P_bNSC*CF_Na;
  enddef;

  def comp background_Kpl_current as
    var i_Kpl: picoA {pub: out};
    var P_Kpl: nanoS_per_millimolar;
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    var CF_K: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    i_Kpl = sel
      case Vm == -3{millivolt}:
        P_Kpl*CF_K*13.0077{millivolt};
      otherwise:
        P_Kpl*CF_K*(Vm+3{millivolt})/(1{dimensionless}-exp(-(Vm+3{millivolt})/13{millivolt}));
    endsel;
    P_Kpl = 0.00011{nanoS_per_millimolar}*pow(Ko/5.4{millimolar}, 0.16{dimensionless});
  enddef;

  def comp background_lCa_current as
    var i_lCa: picoA {pub: out};
    var i_lCa_Na: picoA {pub: out};
    var i_lCa_K: picoA {pub: out};
    var P_lCa: picoA_per_millimolar {init: 0.11};
    var p_open: dimensionless;
    var time: millisecond {pub: in};
    var CF_K: millimolar {pub: in};
    var CF_Na: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    i_lCa = i_lCa_K+i_lCa_Na;
    i_lCa_K = P_lCa*CF_K*p_open;
    i_lCa_Na = P_lCa*CF_Na*p_open;
    p_open = 1{dimensionless}/(1{dimensionless}+pow(0.0012{millimolar}/Cai, 3{dimensionless}));
  enddef;

  def comp background_KATP_current as
    var i_KATP: picoA {pub: out};
    var p_open: dimensionless;
    var gamma: nanoS;
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var ATPi: millimolar {pub: in};
    var P_KATP: nanoS_per_picoF {init: 0.0236};
    var N: picoF {init: 2333};
    i_KATP = gamma*(Vm-E_K)*p_open;
    gamma = P_KATP*N*pow(Ko/1{millimolar}, 0.24{dimensionless});
    p_open = 0.8{dimensionless}/(1{dimensionless}+sqr(ATPi/0.1{millimolar}));
  enddef;

  def comp background_Cab_current as
    var i_Cab: picoA {pub: out};
    var P_Cab: picoA_per_millimolar {init: 0.04};
    var time: millisecond {pub: in};
    var CF_Ca: millimolar {pub: in};
    i_Cab = P_Cab*CF_Ca;
  enddef;

  def comp sodium_calcium_exchanger as
    var i_NaCa: picoA {pub: out};
    var p_E2Na: dimensionless {priv: out};
    var p_E1Na: dimensionless {priv: out};
    var p_E1Ca: dimensionless {priv: out};
    var p_E2Ca: dimensionless {priv: out};
    var k1: per_millisecond {priv: out};
    var k2: per_millisecond {priv: out};
    var k3: per_millisecond {init: 1, priv: out};
    var k4: per_millisecond {init: 1, priv: out};
    var Km_Nai: millimolar {init: 8.75};
    var Km_Nao: millimolar {init: 87.5};
    var Km_Cai: millimolar {init: 0.00138};
    var Km_Cao: millimolar {init: 1.38};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var R: coulomb_millivolt_per_kelvin_millimole {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var Vm: millivolt {pub: in};
    var Cm: picoF {pub: in};
    var time: millisecond {priv: out, pub: in};
    var y: dimensionless {priv: in};
    var P_NaCa: picoA_per_picoF {init: 6.81};
    var Partition: dimensionless {init: 0.32};
    i_NaCa = P_NaCa*Cm*1{millisecond}*(k1*p_E1Na*y-k2*p_E2Na*(1{dimensionless}-y));
    p_E1Na = 1{dimensionless}/(1{dimensionless}+pow(Km_Nai/Nai, 3{dimensionless})*(1{dimensionless}+Cai/Km_Cai));
    p_E2Na = 1{dimensionless}/(1{dimensionless}+pow(Km_Nao/Nao, 3{dimensionless})*(1{dimensionless}+Cao/Km_Cao));
    p_E1Ca = 1{dimensionless}/(1{dimensionless}+Km_Cai/Cai*(1{dimensionless}+pow(Nai/Km_Nai, 3{dimensionless})));
    p_E2Ca = 1{dimensionless}/(1{dimensionless}+Km_Cao/Cao*(1{dimensionless}+pow(Nao/Km_Nao, 3{dimensionless})));
    k1 = 1{per_millisecond}*exp(Partition*F*Vm/(R*T));
    k2 = 1{per_millisecond}*exp((Partition-1{dimensionless})*F*Vm/(R*T));
  enddef;

  def comp sodium_calcium_exchanger_y_gate as
    var y: dimensionless {init: 0.9891789193465331, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var time: millisecond {pub: in};
    var p_E1Na: dimensionless {pub: in};
    var p_E2Na: dimensionless {pub: in};
    var p_E1Ca: dimensionless {pub: in};
    var p_E2Ca: dimensionless {pub: in};
    var k1: per_millisecond {pub: in};
    var k2: per_millisecond {pub: in};
    var k3: per_millisecond {pub: in};
    var k4: per_millisecond {pub: in};
    alpha_y = k2*p_E2Na+k4*p_E2Ca;
    beta_y = k1*p_E1Na+k3*p_E1Ca;
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var p_E2Na: dimensionless {priv: out};
    var p_E1Na: dimensionless {priv: out};
    var p_E1K: dimensionless {priv: out};
    var p_E2K: dimensionless {priv: out};
    var k1: per_millisecond {priv: out};
    var k2: per_millisecond {init: 0.04, priv: out};
    var k3: per_millisecond {init: 0.01, priv: out};
    var k4: per_millisecond {init: 0.165, priv: out};
    var Km_Nai: millimolar {init: 4.05};
    var Km_Nao: millimolar {init: 69.8};
    var Km_Ki: millimolar {init: 32.88};
    var Km_Ko: millimolar {init: 0.258};
    var Km_ATP: millimolar {init: 0.094};
    var Nao_Eff: millimolar;
    var ATPi: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var R: coulomb_millivolt_per_kelvin_millimole {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var Vm: millivolt {pub: in};
    var Cm: picoF {pub: in};
    var time: millisecond {priv: out, pub: in};
    var y: dimensionless {priv: in};
    var P_NaK: picoA_per_picoF {init: 21};
    i_NaK = P_NaK*Cm*1{millisecond}*(k1*p_E1Na*y-k2*p_E2Na*(1{dimensionless}-y));
    p_E1Na = 1{dimensionless}/(1{dimensionless}+pow(Km_Nai/Nai, 1.06{dimensionless})*(1{dimensionless}+pow(Ki/Km_Ki, 1.12{dimensionless})));
    p_E2Na = 1{dimensionless}/(1{dimensionless}+pow(Km_Nao/Nao_Eff, 1.06{dimensionless})*(1{dimensionless}+pow(Ko/Km_Ko, 1.12{dimensionless})));
    p_E1K = 1{dimensionless}/(1{dimensionless}+pow(Km_Ki/Ki, 1.12{dimensionless})*(1{dimensionless}+pow(Nai/Km_Nai, 1.06{dimensionless})));
    p_E2K = 1{dimensionless}/(1{dimensionless}+pow(Km_Ko/Ko, 1.12{dimensionless})*(1{dimensionless}+pow(Nao_Eff/Km_Nao, 1.06{dimensionless})));
    k1 = 0.37{per_millisecond}/(1{dimensionless}+Km_ATP/ATPi);
    Nao_Eff = Nao*exp(-0.82{dimensionless}*F*Vm/(R*T));
  enddef;

  def comp sodium_potassium_pump_y_gate as
    var y: dimensionless {init: 0.5910747147428818, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var time: millisecond {pub: in};
    var p_E1Na: dimensionless {pub: in};
    var p_E2Na: dimensionless {pub: in};
    var p_E1K: dimensionless {pub: in};
    var p_E2K: dimensionless {pub: in};
    var k1: per_millisecond {pub: in};
    var k2: per_millisecond {pub: in};
    var k3: per_millisecond {pub: in};
    var k4: per_millisecond {pub: in};
    alpha_y = k2*p_E2Na+k4*p_E2K;
    beta_y = k1*p_E1Na+k3*p_E1K;
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp SR_calcium_pump as
    var i_SR_U: picoA {pub: out};
    var p_E2Ca: dimensionless {priv: out};
    var p_E1Ca: dimensionless {priv: out};
    var p_E1: dimensionless {priv: out};
    var p_E2: dimensionless {priv: out};
    var k1: per_millisecond {init: 0.01, priv: out};
    var k2: per_millisecond {priv: out};
    var k3: per_millisecond {init: 1, priv: out};
    var k4: per_millisecond {init: 0.01, priv: out};
    var Km_CaSR: millimolar {init: 0.08};
    var Km_CaCyto: millimolar {init: 0.0008};
    var Km_ATP: millimolar {init: 0.1};
    var i_max: picoA {init: 162500};
    var ATPi: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Caup: millimolar {pub: in};
    var time: millisecond {priv: out, pub: in};
    var y: dimensionless {priv: in};
    i_SR_U = i_max*1{millisecond}*(k1*p_E1Ca*y-k2*p_E2Ca*(1{dimensionless}-y));
    p_E1Ca = 1{dimensionless}/(1{dimensionless}+Km_CaSR/Caup);
    p_E2Ca = 1{dimensionless}/(1{dimensionless}+Km_CaCyto/Cai);
    p_E1 = 1{dimensionless}-p_E1Ca;
    p_E2 = 1{dimensionless}-p_E2Ca;
    k2 = 1{per_millisecond}/(1{dimensionless}+Km_ATP/ATPi);
  enddef;

  def comp SR_calcium_pump_y_gate as
    var y: dimensionless {init: 0.46108441538480216, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var time: millisecond {pub: in};
    var p_E1Ca: dimensionless {pub: in};
    var p_E2Ca: dimensionless {pub: in};
    var p_E1: dimensionless {pub: in};
    var p_E2: dimensionless {pub: in};
    var k1: per_millisecond {pub: in};
    var k2: per_millisecond {pub: in};
    var k3: per_millisecond {pub: in};
    var k4: per_millisecond {pub: in};
    alpha_y = k2*p_E2Ca+k4*p_E2;
    beta_y = k1*p_E1Ca+k3*p_E1;
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp RyR_channel as
    var i_RyR: picoA {pub: out};
    var P_RyR: picoA_per_millimolar {init: 62000};
    var k1: per_millisecond;
    var k2: per_millisecond;
    var k3: per_millisecond;
    var k4: per_millisecond {init: 0.000849};
    var p_open_RyR: dimensionless {init: 3.4314360001543243e-4};
    var p_close_RyR: dimensionless {init: 0.19135178123107768};
    var p_open_CaL: dimensionless {pub: in};
    var Cai: millimolar {pub: in};
    var Carel: millimolar {pub: in};
    var time: millisecond {pub: in};
    var Diadid_Factor: per_picoA_millisecond {init: -150};
    var CaDiadic: picoA {pub: in};
    i_RyR = P_RyR*(Carel-Cai)*p_open_RyR;
    ode(p_open_RyR, time) = p_close_RyR*k1-p_open_RyR*k2;
    ode(p_close_RyR, time) = k3*(1{dimensionless}-(p_open_RyR+p_close_RyR))-(k1+k4)*p_close_RyR;
    k1 = 280000{per_millisecond}*sqr(Cai/1{millimolar})+Diadid_Factor*CaDiadic;
    k2 = 0.08{per_millisecond}/(1{dimensionless}+0.36{millimolar}/Carel);
    k3 = 0.000377{per_millisecond}*sqr(Carel/1{millimolar});
  enddef;

  def comp SR_T_current as
    var i_SR_T: picoA {pub: out};
    var P_SR_T: picoA_per_millimolar {init: 386};
    var Carel: millimolar {pub: in};
    var Caup: millimolar {pub: in};
    var time: millisecond {pub: in};
    i_SR_T = P_SR_T*(Caup-Carel);
  enddef;

  def comp SR_L_current as
    var i_SR_L: picoA {pub: out};
    var P_SR_L: picoA_per_millimolar {init: 459};
    var Cai: millimolar {pub: in};
    var Caup: millimolar {pub: in};
    var time: millisecond {pub: in};
    i_SR_L = P_SR_L*(Caup-Cai);
  enddef;

  def comp Ca_concentrations_in_SR as
    var Ca_Total: millimolar {init: 9.455741736977666};
    var Carel: millimolar {pub: out};
    var Caup: millimolar {init: 2.611712901567567, pub: out};
    var V_rel: micrometre3 {init: 160};
    var V_up: micrometre3 {init: 400};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_SR_L: picoA {pub: in};
    var i_SR_T: picoA {pub: in};
    var i_RyR: picoA {pub: in};
    var i_SR_U: picoA {pub: in};
    var CSQN_max: millimolar {init: 10};
    var K_mCSQN: millimolar {init: 0.8};
    var b1: millimolar;
    var c1: millimolar2;
    b1 = CSQN_max-Ca_Total+K_mCSQN;
    c1 = K_mCSQN*Ca_Total;
    Carel = (sqrt(sqr(b1)+4{dimensionless}*c1)-b1)/2{dimensionless};
    ode(Ca_Total, time) = (i_SR_T-i_RyR)/(2{dimensionless}*F*V_rel);
    ode(Caup, time) = (-i_SR_U-i_SR_T-i_SR_L)/(2{dimensionless}*F*V_up);
  enddef;

  def comp NL_model as
    var dCaidt: millimolar_per_millisecond {pub: out};
    var dATPdt: millimolar_per_millisecond {pub: out};
    var EffFraction: dimensionless;
    var pCa: dimensionless {init: 0.02490898775497523};
    var pCaCB: dimensionless {init: 0.001990153835322864};
    var pCB: dimensionless {init: 4.2941813853474524e-4};
    var p: dimensionless;
    var T_t: millimolar {init: 0.07};
    var Q_a: per_millisecond;
    var Q_b: per_millisecond;
    var Q_r: per_millisecond;
    var Q_d: per_millisecond;
    var Q_d1: per_millisecond;
    var Q_d2: per_millisecond;
    var Y_1: per_millimolar_millisecond {init: 39};
    var Y_2: per_millisecond {init: 0.0039};
    var Y_3: per_millisecond {init: 0.03};
    var Y_4: per_millisecond {init: 0.12};
    var Y_d: millisecond_per_micrometre2 {init: 0.027};
    var Z_1: per_millisecond {init: 0.03};
    var Z_2: per_millisecond {init: 0.0039};
    var Z_3: per_millimolar_millisecond {init: 1560};
    var h: micrometre;
    var L_a: micrometre {init: 1.17};
    var L: micrometre {init: 0.9623799975411884};
    var ForceCB: mN_per_mm2;
    var X: micrometre {init: 0.9573749975411884};
    var time: millisecond {pub: in};
    var Cai: millimolar {pub: in};
    var NewCBF: mN_per_mm2_micrometre;
    var CBBound: millimolar;
    var KForceEC: mN_per_mm2_micrometre5 {init: 140000};
    var ZeroForceEL: micrometre {init: 0.97};
    var KForceLinearEc: mN_per_mm2_micrometre {init: 200};
    var ForceFactor: mN_per_mm2_micrometre_millimolar {init: 1800000};
    var ForceEcomp: mN_per_mm2;
    var B: per_millisecond {init: 1.2};
    var h_c: micrometre {init: 0.005};
    var ForceExt: mN_per_mm2;
    h = L-X;
    p = 1{dimensionless}-pCa-pCaCB-pCB;
    Q_b = Y_1*Cai*p-Z_1*pCa;
    EffFraction = exp(-20{per_micrometre2}*sqr(L-L_a));
    Q_a = Y_2*pCa*EffFraction-Z_2*pCaCB;
    Q_r = Y_3*pCaCB-Z_3*pCB*Cai;
    Q_d = Y_4*pCB;
    Q_d1 = Y_d*sqr(ode(X, time))*pCB;
    Q_d2 = Y_d*sqr(ode(X, time))*pCaCB;
    ode(pCa, time) = Q_b-Q_a;
    ode(pCaCB, time) = Q_a-Q_r-Q_d2;
    ode(pCB, time) = Q_r-Q_d-Q_d1;
    dCaidt = T_t*(Q_d2+Q_r-Q_b);
    dATPdt = -0.4{per_millisecond}*pCaCB*T_t;
    CBBound = T_t*(pCaCB+pCB);
    NewCBF = ForceFactor*CBBound;
    ForceEcomp = KForceEC*pow(ZeroForceEL-L, 5{dimensionless})+KForceLinearEc*(ZeroForceEL-L);
    ForceCB = NewCBF*h;
    ForceExt = -ForceEcomp+ForceCB;
    ode(X, time) = B*(h-h_c);
  enddef;

  def comp internal_concentrations as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp transmembrane_currents as
  enddef;

  def group as containment for
    comp membrane incl
      comp internal_concentrations incl
        comp internal_ion_concentrations;
        comp Ca_concentrations_in_SR;
        comp constant_field_equations;
        comp ATP_production;
        comp NL_model;
      endcomp;
      comp transmembrane_currents incl
        comp sodium_current incl
          comp sodium_current_voltage_dependent_gate;
          comp sodium_current_ultra_slow_gate;
        endcomp;
        comp L_type_Ca_channel incl
          comp L_type_Ca_channel_voltage_dependent_gate;
          comp L_type_Ca_channel_Ca_dependent_gate;
          comp L_type_Ca_channel_ultra_slow_gate;
        endcomp;
        comp T_type_Ca_channel incl
          comp T_type_Ca_channel_y1_gate;
          comp T_type_Ca_channel_y2_gate;
        endcomp;
        comp time_independent_potassium_current incl
          comp time_independent_potassium_current_y_gate;
        endcomp;
        comp rapid_time_dependent_potassium_current incl
          comp rapid_time_dependent_potassium_current_y1_gate;
          comp rapid_time_dependent_potassium_current_y2_gate;
          comp rapid_time_dependent_potassium_current_y3_gate;
        endcomp;
        comp slow_time_dependent_potassium_current incl
          comp slow_time_dependent_potassium_current_y1_gate;
          comp slow_time_dependent_potassium_current_y2_gate;
        endcomp;
        comp transient_outward_current incl
          comp transient_outward_current_y1_gate;
          comp transient_outward_current_y2_gate;
        endcomp;
        comp background_NSC_current;
        comp background_Kpl_current;
        comp background_lCa_current;
        comp background_Cab_current;
        comp background_KATP_current;
        comp sodium_calcium_exchanger incl
          comp sodium_calcium_exchanger_y_gate;
        endcomp;
        comp sodium_potassium_pump incl
          comp sodium_potassium_pump_y_gate;
        endcomp;
      endcomp;
      comp intracellular_currents incl
        comp SR_calcium_pump incl
          comp SR_calcium_pump_y_gate;
        endcomp;
        comp RyR_channel;
        comp SR_T_current;
        comp SR_L_current;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_voltage_dependent_gate;
      comp sodium_current_ultra_slow_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_voltage_dependent_gate;
      comp L_type_Ca_channel_Ca_dependent_gate;
      comp L_type_Ca_channel_ultra_slow_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_y1_gate;
      comp T_type_Ca_channel_y2_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_y_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_y1_gate;
      comp rapid_time_dependent_potassium_current_y2_gate;
      comp rapid_time_dependent_potassium_current_y3_gate;
    endcomp;
    comp slow_time_dependent_potassium_current incl
      comp slow_time_dependent_potassium_current_y1_gate;
      comp slow_time_dependent_potassium_current_y2_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_y1_gate;
      comp transient_outward_current_y2_gate;
    endcomp;
    comp sodium_calcium_exchanger incl
      comp sodium_calcium_exchanger_y_gate;
    endcomp;
    comp sodium_potassium_pump incl
      comp sodium_potassium_pump_y_gate;
    endcomp;
    comp SR_calcium_pump incl
      comp SR_calcium_pump_y_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between internal_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between ATP_production and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between SR_T_current and environment for
    vars time and time;
  enddef;
  def map between SR_L_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between background_NSC_current and environment for
    vars time and time;
  enddef;
  def map between background_Kpl_current and environment for
    vars time and time;
  enddef;
  def map between background_lCa_current and environment for
    vars time and time;
  enddef;
  def map between background_KATP_current and environment for
    vars time and time;
  enddef;
  def map between background_Cab_current and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between SR_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between RyR_channel and environment for
    vars time and time;
  enddef;
  def map between Ca_concentrations_in_SR and environment for
    vars time and time;
  enddef;
  def map between NL_model and environment for
    vars time and time;
  enddef;
  def map between membrane and internal_ion_concentrations for
    vars F and F;
    vars i_ext and i_ext;
  enddef;
  def map between membrane and constant_field_equations for
    vars Vm and Vm;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ATP_production for
    vars Vm and Vm;
    vars F and F;
  enddef;
  def map between membrane and sodium_current for
    vars Vm and Vm;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars Vm and Vm;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars Vm and Vm;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars Vm and Vm;
    vars Cm and Cm;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars Vm and Vm;
    vars Cm and Cm;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars Vm and Vm;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and transient_outward_current for
    vars Vm and Vm;
    vars i_to and i_to;
  enddef;
  def map between membrane and background_NSC_current for
    vars i_bNSC and i_bNSC;
  enddef;
  def map between membrane and background_Kpl_current for
    vars i_Kpl and i_Kpl;
    vars Vm and Vm;
  enddef;
  def map between membrane and background_lCa_current for
    vars i_lCa and i_lCa;
  enddef;
  def map between membrane and background_KATP_current for
    vars i_KATP and i_KATP;
    vars Vm and Vm;
  enddef;
  def map between membrane and background_Cab_current for
    vars i_Cab and i_Cab;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars Vm and Vm;
    vars Cm and Cm;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars Vm and Vm;
    vars Cm and Cm;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and Ca_concentrations_in_SR for
    vars F and F;
  enddef;
  def map between internal_ion_concentrations and constant_field_equations for
    vars Nai and Nai;
    vars Ki and Ki;
    vars Cai and Cai;
  enddef;
  def map between internal_ion_concentrations and NL_model for
    vars Cai and Cai;
    vars dCaidt_NL and dCaidt;
  enddef;
  def map between external_ion_concentrations and constant_field_equations for
    vars Nao and Nao;
    vars Ko and Ko;
    vars Cao and Cao;
  enddef;
  def map between external_ion_concentrations and time_independent_potassium_current for
    vars Ko and Ko;
  enddef;
  def map between external_ion_concentrations and rapid_time_dependent_potassium_current for
    vars Ko and Ko;
  enddef;
  def map between external_ion_concentrations and background_Kpl_current for
    vars Ko and Ko;
  enddef;
  def map between external_ion_concentrations and background_KATP_current for
    vars Ko and Ko;
  enddef;
  def map between internal_ion_concentrations and background_lCa_current for
    vars Cai and Cai;
    vars i_lCa_Na and i_lCa_Na;
    vars i_lCa_K and i_lCa_K;
  enddef;
  def map between internal_ion_concentrations and sodium_calcium_exchanger for
    vars Nai and Nai;
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between external_ion_concentrations and sodium_calcium_exchanger for
    vars Nao and Nao;
    vars Cao and Cao;
  enddef;
  def map between internal_ion_concentrations and sodium_potassium_pump for
    vars Nai and Nai;
    vars Ki and Ki;
    vars i_NaK and i_NaK;
  enddef;
  def map between external_ion_concentrations and sodium_potassium_pump for
    vars Nao and Nao;
    vars Ko and Ko;
  enddef;
  def map between internal_ion_concentrations and SR_calcium_pump for
    vars Cai and Cai;
    vars i_SR_U and i_SR_U;
  enddef;
  def map between internal_ion_concentrations and RyR_channel for
    vars i_RyR and i_RyR;
    vars Cai and Cai;
  enddef;
  def map between internal_ion_concentrations and SR_L_current for
    vars Cai and Cai;
    vars i_SR_L and i_SR_L;
  enddef;
  def map between internal_ion_concentrations and sodium_current for
    vars i_Na_Na and i_Na_Na;
    vars i_Na_K and i_Na_K;
  enddef;
  def map between internal_ion_concentrations and L_type_Ca_channel for
    vars i_CaL_Na and i_CaL_Na;
    vars i_CaL_Ca and i_CaL_Ca;
    vars i_CaL_K and i_CaL_K;
    vars Cai and Cai;
  enddef;
  def map between internal_ion_concentrations and T_type_Ca_channel for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between internal_ion_concentrations and time_independent_potassium_current for
    vars i_K1 and i_K1;
    vars Ki and Ki;
  enddef;
  def map between internal_ion_concentrations and rapid_time_dependent_potassium_current for
    vars i_Kr and i_Kr;
  enddef;
  def map between internal_ion_concentrations and slow_time_dependent_potassium_current for
    vars i_Ks_Na and i_Ks_Na;
    vars i_Ks_K and i_Ks_K;
    vars Cai and Cai;
  enddef;
  def map between internal_ion_concentrations and transient_outward_current for
    vars i_to_Na and i_to_Na;
    vars i_to_K and i_to_K;
  enddef;
  def map between internal_ion_concentrations and background_NSC_current for
    vars i_bNSC and i_bNSC;
    vars i_bNSC_Na and i_bNSC_Na;
    vars i_bNSC_K and i_bNSC_K;
  enddef;
  def map between internal_ion_concentrations and background_Kpl_current for
    vars i_Kpl and i_Kpl;
  enddef;
  def map between internal_ion_concentrations and background_KATP_current for
    vars i_KATP and i_KATP;
  enddef;
  def map between internal_ion_concentrations and background_Cab_current for
    vars i_Cab and i_Cab;
  enddef;
  def map between constant_field_equations and sodium_current for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and L_type_Ca_channel for
    vars CF_Ca and CF_Ca;
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and T_type_Ca_channel for
    vars CF_Ca and CF_Ca;
  enddef;
  def map between constant_field_equations and slow_time_dependent_potassium_current for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and transient_outward_current for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and background_NSC_current for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and background_Kpl_current for
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and background_lCa_current for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and background_Cab_current for
    vars CF_Ca and CF_Ca;
  enddef;
  def map between ATP_production and NL_model for
    vars dATPdt_NL and dATPdt;
  enddef;
  def map between ATP_production and L_type_Ca_channel for
    vars ATPi and ATPi;
  enddef;
  def map between ATP_production and background_KATP_current for
    vars ATPi and ATPi;
  enddef;
  def map between ATP_production and sodium_potassium_pump for
    vars i_NaK and i_NaK;
    vars ATPi and ATPi;
  enddef;
  def map between ATP_production and SR_calcium_pump for
    vars ATPi and ATPi;
    vars i_SR_U and i_SR_U;
  enddef;
  def map between ATP_production and internal_ion_concentrations for
    vars Vi and Vi;
  enddef;
  def map between time_independent_potassium_current and rapid_time_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and background_KATP_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_concentrations_in_SR and SR_calcium_pump for
    vars Caup and Caup;
    vars i_SR_U and i_SR_U;
  enddef;
  def map between L_type_Ca_channel and RyR_channel for
    vars p_open_CaL and p_open_CaL;
    vars CaDiadic and CaDiadic;
  enddef;
  def map between Ca_concentrations_in_SR and RyR_channel for
    vars Carel and Carel;
    vars i_RyR and i_RyR;
  enddef;
  def map between Ca_concentrations_in_SR and SR_T_current for
    vars Caup and Caup;
    vars Carel and Carel;
    vars i_SR_T and i_SR_T;
  enddef;
  def map between Ca_concentrations_in_SR and SR_L_current for
    vars Caup and Caup;
    vars i_SR_L and i_SR_L;
  enddef;
  def map between sodium_current and sodium_current_voltage_dependent_gate for
    vars p_AP_Na and p_AP_Na;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between sodium_current and sodium_current_ultra_slow_gate for
    vars y and y;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_voltage_dependent_gate for
    vars p_AP_CaL and p_AP_CaL;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between L_type_Ca_channel_Ca_dependent_gate and L_type_Ca_channel_voltage_dependent_gate for
    vars p_AP_CaL and p_AP_CaL;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_Ca_dependent_gate for
    vars p_U and p_U;
    vars p_UCa and p_UCa;
    vars Cai and Cai;
    vars CF_Ca and CF_Ca;
    vars time and time;
    vars Vm and Vm;
    vars CaDiadic and CaDiadic;
    vars p_open_CaL and p_open_CaL;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_ultra_slow_gate for
    vars y and y;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_y1_gate for
    vars y1 and y1;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_y2_gate for
    vars y2 and y2;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_y_gate for
    vars fO and fO;
    vars y and y;
    vars E_K and E_K;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_y1_gate for
    vars y1 and y1;
    vars E_K and E_K;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_y2_gate for
    vars y2 and y2;
    vars E_K and E_K;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_y3_gate for
    vars y3 and y3;
    vars E_K and E_K;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_y1_gate for
    vars y1 and y1;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_y2_gate for
    vars y2 and y2;
    vars Cai and Cai;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between transient_outward_current and transient_outward_current_y1_gate for
    vars y1 and y1;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between transient_outward_current and transient_outward_current_y2_gate for
    vars y2 and y2;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between sodium_calcium_exchanger and sodium_calcium_exchanger_y_gate for
    vars y and y;
    vars p_E1Na and p_E1Na;
    vars p_E2Na and p_E2Na;
    vars p_E1Ca and p_E1Ca;
    vars p_E2Ca and p_E2Ca;
    vars time and time;
    vars k1 and k1;
    vars k2 and k2;
    vars k3 and k3;
    vars k4 and k4;
  enddef;
  def map between sodium_potassium_pump and sodium_potassium_pump_y_gate for
    vars y and y;
    vars p_E1Na and p_E1Na;
    vars p_E2Na and p_E2Na;
    vars p_E1K and p_E1K;
    vars p_E2K and p_E2K;
    vars time and time;
    vars k1 and k1;
    vars k2 and k2;
    vars k3 and k3;
    vars k4 and k4;
  enddef;
  def map between SR_calcium_pump and SR_calcium_pump_y_gate for
    vars y and y;
    vars p_E1 and p_E1;
    vars p_E2 and p_E2;
    vars p_E1Ca and p_E1Ca;
    vars p_E2Ca and p_E2Ca;
    vars time and time;
    vars k1 and k1;
    vars k2 and k2;
    vars k3 and k3;
    vars k4 and k4;
  enddef;
enddef;
