// This CellML file was generated on 18/06/2009 at 17:01:39 using:
//
// COR (0.9.31.1279)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// title: Steady state model adapted from the author's orignal code
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// reference: subject_type keyword; cardiac; electrophysiology
// reference: Pubmed_id 19136600; Family Maltsev; Given V; Other A; Family Lakatta; Given E; Other G; title Synergism of coupled subsarcolemmal Ca2+ clocks and sarcolemmal voltage clocks confers robust and flexible pacemaker function in a novel pacemaker cell model.; W3CDTF 2009-03; title Am J Physiol Heart Circ Physiol.; volume 296(3); first_page H561; last_page H562
def model maltsev_2009 as
  // Synergism of coupled subsarcolemmal Ca2+ clocks and sarcolemmal voltage clocks confers robust and flexible pacemaker function in a novel pacemaker cell model
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model has been tested in OpenCell and COR and the units are balanced. The model runs to recreate the published results. This particular variant of the model uses the initial conditions from the author's original code to create a steady state model.
  //
  // Model Structure
  //
  // ABSTRACT: Recent experimental studies have demonstrated that sinoatrial node cells (SANC) generate spontaneous, rhythmic, local subsarcolemmal Ca(2+) releases (Ca(2+) clock), which occur during late diastolic depolarization (DD) and interact with the classic sarcolemmal voltage oscillator (membrane clock) by activating Na(+)-Ca(2+) exchanger current (I(NCX)). This and other interactions between clocks, however, are not captured by existing essentially membrane-delimited cardiac pacemaker cell numerical models. Using wide-scale parametric analysis of classic formulations of membrane clock and Ca(2+) cycling, we have constructed and initially explored a prototype rabbit SANC model featuring both clocks. Our coupled oscillator system exhibits greater robustness and flexibility than membrane clock operating alone. Rhythmic spontaneous Ca(2+) releases of sarcoplasmic reticulum (SR)-based Ca(2+) clock ignite rhythmic action potentials via late DD I(NCX) over much broader ranges of membrane clock parameters [e.g., L-type Ca(2+) current (I(CaL)) and/or hyperpolarization-activated ("funny") current (I(f)) conductances]. The system Ca(2+) clock includes SR and sarcolemmal Ca(2+) fluxes, which optimize cell Ca(2+) balance to increase amplitudes of both SR Ca(2+) release and late DD I(NCX) as SR Ca(2+) pumping rate increases, resulting in a broad pacemaker rate modulation (1.8-4.6 Hz). In contrast, the rate modulation range via membrane clock parameters is substantially smaller when Ca(2+) clock is unchanged or lacking. When Ca(2+) clock is disabled, the system parametric space for fail-safe SANC operation considerably shrinks: without rhythmic late DD I(NCX) ignition signals membrane clock substantially slows, becomes dysrhythmic, or halts. In conclusion, the Ca(2+) clock is a new critical dimension in SANC function. A synergism of the coupled function of Ca(2+) and membrane clocks confers fail-safe SANC operation at greatly varying rates.
  //
  // The original paper reference is cited below:
  //
  // Synergism of coupled subsarcolemmal Ca2+ clocks and sarcolemmal voltage clocks confers robust and flexible pacemaker function in a novel pacemaker cell model, Victor A. Maltsev and Edward G. Lakatta, 2009, American Journal of Physiology, 286, H594-H615. PubMed ID: 19136600 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=19136600&dopt=Abstract)
  //
  // reaction diagram
  //
  // Schematic diagram of the interacting Ca2+ clock and membrane clock in a model of rabbit sinoatrial node cells.
  // Vm
  //
  // membrane potential
  // electric_potentials
  //
  // electric potentials
  // i_CaL
  //
  // L-type calcium current
  // i_CaT
  //
  // T-type calcium current
  // i_Kr
  //
  // rapidly activating delayed rectifier potassium current
  // i_Ks
  //
  // slowly activating delayed rectifier potassium current
  // AP_sensitive_currents
  //
  // 4-aminopyridine-sensitive currents
  // i_f
  //
  // hyperpolarization-activated, "funny" current
  // i_st
  //
  // sustained inward current
  // i_b_Na
  //
  // sodium dependent background current
  // i_NaK
  //
  // sodium-potassium pump current
  // i_b_Ca
  //
  // calcium background current
  // i_NaCa
  //
  // sodium-calcium exchanger current
  // j_SRCarel
  //
  // calcium release flux from the sarcoplasmic reticulum via RyRs
  // intracellular_calcium_fluxes
  //
  // intracellular calcium fluxes
  // calcium_buffering
  //
  // calcium buffering
  // calcium_dynamics
  //
  // dynamics of calcium concentrations in cell compartments
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar2_millisecond as
    unit millimolar {expo: -2};
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: nano};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit per_picoF as
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoA_per_millimolar_picoF as
    unit ampere {pref: pico};
    unit millimolar {expo: -1};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picolitre as
    unit litre {pref: pico};
  enddef;
  def unit picolitre_per_femtolitre as
    unit picolitre;
    unit litre {pref: femto, expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {pref: kilo, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp Vm as
    var Vm: millivolt {init: -57.9639346865, pub: out};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in};
    var i_CaT: picoA {pub: in};
    var i_CaL: picoA {pub: in};
    var i_f: picoA {pub: in};
    var i_st: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_sus: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_b_Ca: picoA {pub: in};
    var i_b_Na: picoA {pub: in};
    ode(Vm, time) = -(i_CaL+i_CaT+i_f+i_st+i_Kr+i_Ks+i_to+i_sus+i_NaK+i_NaCa+i_b_Ca+i_b_Na)/Cm;
  enddef;

  def comp electric_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Ko/Ki);
    E_Ks = R*T/F*ln((Ko+0.12{dimensionless}*Nao)/(Ki+0.12{dimensionless}*Nai));
  enddef;

  def comp i_CaL as
    var i_CaL: picoA {pub: out};
    var E_CaL: millivolt {init: 45, pub: out};
    var g_CaL: nanoS_per_picoF {init: 0.464};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var Ca_sub: millimolar {pub: in, priv: out};
    var dL: dimensionless {priv: in};
    var fL: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    i_CaL = Cm*g_CaL*(Vm-E_CaL)*dL*fL*fCa;
  enddef;

  def comp i_CaL_dL_gate as
    var dL: dimensionless {init: 0.000584545564405, pub: out};
    var dL_infinity: dimensionless;
    var tau_dL: millisecond;
    var alpha_dL: per_millisecond;
    var beta_dL: per_millisecond;
    var adVm: millivolt;
    var bdVm: millivolt;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    dL_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+13.5{millivolt})/6{millivolt}));
    tau_dL = 1{dimensionless}/(alpha_dL+beta_dL);
    alpha_dL = -0.02839{per_millivolt_millisecond}*(adVm+35{millivolt})/(exp(-(adVm+35{millivolt})/2.5{millivolt})-1{dimensionless})-0.0849{per_millivolt_millisecond}*adVm/(exp(-adVm/4.8{millivolt})-1{dimensionless});
    adVm = sel
      case Vm == -35{millivolt}:
        -35.00001{millivolt};
      case Vm == 0{millivolt}:
        0.00001{millivolt};
      otherwise:
        Vm;
    endsel;
    beta_dL = 0.01143{per_millivolt_millisecond}*(bdVm-5{millivolt})/(exp((bdVm-5{millivolt})/2.5{millivolt})-1{dimensionless});
    bdVm = sel
      case Vm == 5{millivolt}:
        5.00001{millivolt};
      otherwise:
        Vm;
    endsel;
    ode(dL, time) = (dL_infinity-dL)/tau_dL;
  enddef;

  def comp i_CaL_fL_gate as
    var fL: dimensionless {init: 0.862381249774, pub: out};
    var fL_infinity: dimensionless;
    var tau_fL: millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    fL_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm+35{millivolt})/7.3{millivolt}));
    tau_fL = 44.3{millisecond}+257.1{millisecond}*exp(-sqr((Vm+32.5{millivolt})/13.9{millivolt}));
    ode(fL, time) = (fL_infinity-fL)/tau_fL;
  enddef;

  def comp i_CaL_fCa_gate as
    var fCa: dimensionless {init: 0.711395919653, pub: out};
    var alpha_fCa: per_millisecond {init: 0.021};
    var fCa_infinity: dimensionless;
    var tau_fCa: millisecond;
    var Km_fCa: millimolar {init: 0.00035};
    var Vm: millivolt {pub: in};
    var Ca_sub: millimolar {pub: in};
    var time: millisecond {pub: in};
    fCa_infinity = Km_fCa/(Km_fCa+Ca_sub);
    tau_fCa = fCa_infinity/alpha_fCa;
    ode(fCa, time) = (fCa_infinity-fCa)/tau_fCa;
  enddef;

  def comp i_CaT as
    var i_CaT: picoA {pub: out};
    var g_CaT: nanoS_per_picoF {init: 0.1832};
    var E_CaT: millivolt {init: 45};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var dT: dimensionless {priv: in};
    var fT: dimensionless {priv: in};
    i_CaT = Cm*g_CaT*(Vm-E_CaT)*dT*fT;
  enddef;

  def comp i_CaT_dT_gate as
    var dT: dimensionless {init: 0.00504393374639, pub: out};
    var dT_infinity: dimensionless;
    var tau_dT: millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    dT_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+26.3{millivolt})/6{millivolt}));
    tau_dT = 1{millisecond}/(1.068{dimensionless}*exp((Vm+26.3{millivolt})/30{millivolt})+1.068{dimensionless}*exp(-(Vm+26.3{millivolt})/30{millivolt}));
    ode(dT, time) = (dT_infinity-dT)/tau_dT;
  enddef;

  def comp i_CaT_fT_gate as
    var fT: dimensionless {init: 0.420757825415, pub: out};
    var fT_infinity: dimensionless;
    var tau_fT: millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    fT_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm+61.7{millivolt})/5.6{millivolt}));
    tau_fT = 1{millisecond}/(0.0153{dimensionless}*exp(-(Vm+61.7{millivolt})/83.3{millivolt})+0.015{dimensionless}*exp((Vm+61.7{millivolt})/15.38{millivolt}));
    ode(fT, time) = (fT_infinity-fT)/tau_fT;
  enddef;

  def comp i_Kr as
    var i_Kr: picoA {pub: out};
    var g_Kr: nanoS_per_picoF {init: 0.08113973};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var paS: dimensionless {priv: in};
    var paF: dimensionless {priv: in};
    var pi_: dimensionless {priv: in};
    i_Kr = Cm*g_Kr*(Vm-E_K)*(0.6{dimensionless}*paF+0.4{dimensionless}*paS)*pi_;
  enddef;

  def comp i_Kr_pa_gate as
    var paS: dimensionless {init: 0.453100576739, pub: out};
    var paF: dimensionless {init: 0.144755091176, pub: out};
    var pa_infinity: dimensionless;
    var tau_paS: millisecond;
    var tau_paF: millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    pa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+23.2{millivolt})/10.6{millivolt}));
    tau_paS = 0.84655354{millisecond}/(0.0042{dimensionless}*exp(Vm/17{millivolt})+0.00015{dimensionless}*exp(-Vm/21.6{millivolt}));
    tau_paF = 0.84655354{millisecond}/(0.0372{dimensionless}*exp(Vm/15.9{millivolt})+0.00096{dimensionless}*exp(-Vm/22.5{millivolt}));
    ode(paS, time) = (pa_infinity-paS)/tau_paS;
    ode(paF, time) = (pa_infinity-paF)/tau_paF;
  enddef;

  def comp i_Kr_pi_gate as
    var pi_: dimensionless {init: 0.849409822329, pub: out};
    var pi_infinity: dimensionless;
    var tau_pi: millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    pi_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm+28.6{millivolt})/17.1{millivolt}));
    tau_pi = 1{millisecond}/(0.1{dimensionless}*exp(-Vm/54.645{millivolt})+0.656{dimensionless}*exp(Vm/106.157{millivolt}));
    ode(pi_, time) = (pi_infinity-pi_)/tau_pi;
  enddef;

  def comp i_Ks as
    var i_Ks: picoA {pub: out};
    var g_Ks: nanoS_per_picoF {init: 0.0259};
    var E_Ks: millivolt {pub: in};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var n: dimensionless {priv: in};
    i_Ks = Cm*g_Ks*(Vm-E_Ks)*sqr(n);
  enddef;

  def comp i_Ks_n_gate as
    var n: dimensionless {init: 0.0264600410928, pub: out};
    var n_infinity: dimensionless;
    var tau_n: millisecond;
    var alpha_n: per_millisecond;
    var beta_n: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    n_infinity = alpha_n/(alpha_n+beta_n);
    tau_n = 1{dimensionless}/(alpha_n+beta_n);
    alpha_n = 0.014{per_millisecond}/(1{dimensionless}+exp(-(Vm-40{millivolt})/9{millivolt}));
    beta_n = 0.001{per_millisecond}*exp(-Vm/45{millivolt});
    ode(n, time) = (n_infinity-n)/tau_n;
  enddef;

  def comp AP_sensitive_currents as
    var i_to: picoA {pub: out};
    var i_sus: picoA {pub: out};
    var g_to: nanoS_per_picoF {init: 0.252};
    var g_sus: nanoS_per_picoF {init: 0.02};
    var Cm: picoF {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = Cm*g_to*(Vm-E_K)*q*r;
    i_sus = Cm*g_sus*(Vm-E_K)*r;
  enddef;

  def comp AP_sensitive_currents_q_gate as
    var q: dimensionless {init: 0.694241313965, pub: out};
    var q_infinity: dimensionless;
    var tau_q: millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm+49{millivolt})/13{millivolt}));
    tau_q = 6.06{millisecond}+39.102{millisecond}/(0.57{dimensionless}*exp(-0.08{per_millivolt}*(Vm+44{millivolt}))+0.065{dimensionless}*exp(0.1{per_millivolt}*(Vm+45.93{millivolt})));
    ode(q, time) = (q_infinity-q)/tau_q;
  enddef;

  def comp AP_sensitive_currents_r_gate as
    var r: dimensionless {init: 0.00558131733359, pub: out};
    var r_infinity: dimensionless;
    var tau_r: millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm-19.3{millivolt})/15{millivolt}));
    tau_r = 2.75352{millisecond}+14.40516{millisecond}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(Vm+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(Vm+23.84{millivolt})));
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp i_f as
    var i_f: picoA {pub: out};
    var i_f_Na: picoA {pub: out};
    var i_f_K: picoA {pub: out};
    var g_if: nanoS_per_picoF {init: 0.15};
    var Cm: picoF {pub: in};
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var y: dimensionless {priv: in};
    i_f_Na = Cm*0.3833{dimensionless}*g_if*(Vm-E_Na)*sqr(y);
    i_f_K = Cm*0.6167{dimensionless}*g_if*(Vm-E_K)*sqr(y);
    i_f = i_f_Na+i_f_K;
  enddef;

  def comp i_f_y_gate as
    var y: dimensionless {init: 0.113643187247, pub: out};
    var y_infinity: dimensionless;
    var tau_y: millisecond;
    var VIf_half: millivolt {init: -64};
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm-VIf_half)/13.5{millivolt}));
    tau_y = 0.7166529{millisecond}/(exp(-(Vm+386.9{millivolt})/45.302{millivolt})+exp((Vm-73.08{millivolt})/19.231{millivolt}));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp i_st as
    var i_st: picoA {pub: out};
    var g_st: nanoS_per_picoF {init: 0.003};
    var E_st: millivolt {init: 37.4};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var qa: dimensionless {priv: in};
    var qi: dimensionless {priv: in};
    i_st = Cm*g_st*(Vm-E_st)*qa*qi;
  enddef;

  def comp i_st_qa_gate as
    var qa: dimensionless {init: 0.42380243163, pub: out};
    var qa_infinity: dimensionless;
    var tau_qa: millisecond;
    var alpha_qa: per_millisecond;
    var beta_qa: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    qa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+57{millivolt})/5{millivolt}));
    tau_qa = 1{dimensionless}/(alpha_qa+beta_qa);
    alpha_qa = 1{dimensionless}/(0.15{millisecond}*exp(-Vm/11{millivolt})+0.2{millisecond}*exp(-Vm/700{millivolt}));
    beta_qa = 1{dimensionless}/(16{millisecond}*exp(Vm/8{millivolt})+15{millisecond}*exp(Vm/50{millivolt}));
    ode(qa, time) = (qa_infinity-qa)/tau_qa;
  enddef;

  def comp i_st_qi_gate as
    var qi: dimensionless {init: 0.447294008304, pub: out};
    var qi_infinity: dimensionless;
    var tau_qi: millisecond;
    var alpha_qi: per_millisecond;
    var beta_qi: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    qi_infinity = alpha_qi/(alpha_qi+beta_qi);
    tau_qi = 6.65{dimensionless}/(alpha_qi+beta_qi);
    alpha_qi = 1{dimensionless}/(3100{millisecond}*exp(Vm/13{millivolt})+700{millisecond}*exp(Vm/70{millivolt}));
    beta_qi = 1{dimensionless}/(95{millisecond}*exp(-Vm/10{millivolt})+50{millisecond}*exp(-Vm/700{millivolt}))+0.000229{per_millisecond}/(1{dimensionless}+exp(-Vm/5{millivolt}));
    ode(qi, time) = (qi_infinity-qi)/tau_qi;
  enddef;

  def comp i_b_Na as
    var i_b_Na: picoA {pub: out};
    var g_b_Na: nanoS_per_picoF {init: 0.00486};
    var Cm: picoF {pub: in};
    var E_Na: millivolt {pub: in};
    var Vm: millivolt {pub: in};
    i_b_Na = Cm*g_b_Na*(Vm-E_Na);
  enddef;

  def comp i_NaK as
    var i_NaK: picoA {pub: out};
    var Km_Kp: millimolar {init: 1.4};
    var Km_Nap: millimolar {init: 14};
    var i_NaK_max: picoA_per_picoF {init: 2.88};
    var Cm: picoF {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Vm: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaK = Cm*i_NaK_max/((1{dimensionless}+pow(Km_Kp/Ko, 1.2{dimensionless}))*(1{dimensionless}+pow(Km_Nap/Nai, 1.3{dimensionless}))*(1{dimensionless}+exp(-(Vm-E_Na+120{millivolt})/30{millivolt})));
  enddef;

  def comp i_b_Ca as
    var i_b_Ca: picoA {pub: out};
    var g_b_Ca: nanoS_per_picoF {init: 0.0006};
    var Cm: picoF {pub: in};
    var E_CaL: millivolt {pub: in};
    var Vm: millivolt {pub: in};
    i_b_Ca = Cm*g_b_Ca*(Vm-E_CaL);
  enddef;

  def comp i_NaCa as
    var i_NaCa: picoA {pub: out};
    var kNaCa: picoA_per_picoF {init: 187.5};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 0.1369};
    var Qn: dimensionless {init: 0.4315};
    var Qco: dimensionless {init: 0};
    var K3ni: millimolar {init: 26.44};
    var Kci: millimolar {init: 0.0207};
    var K1ni: millimolar {init: 395.3};
    var K2ni: millimolar {init: 2.289};
    var Kcni: millimolar {init: 26.44};
    var K3no: millimolar {init: 4.663};
    var K1no: millimolar {init: 1628};
    var K2no: millimolar {init: 561.4};
    var Kco: millimolar {init: 3.663};
    var RTOnF: millivolt;
    var do: dimensionless;
    var di: dimensionless;
    var Cm: picoF {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: millisecond {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm: millivolt {pub: in};
    i_NaCa = Cm*kNaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    RTOnF = R*T/F;
    k12 = Ca_sub/Kci*exp(-Qci*Vm/RTOnF)/di;
    k14 = Nai/K1ni*Nai/K2ni*(1{dimensionless}+Nai/K3ni)*exp(Qn*Vm/(2{dimensionless}*RTOnF))/di;
    k41 = exp(-Qn*Vm/(2{dimensionless}*RTOnF));
    di = 1{dimensionless}+Ca_sub/Kci*(1{dimensionless}+exp(-Qci*Vm/RTOnF)+Nai/Kcni)+Nai/K1ni*(1{dimensionless}+Nai/K2ni*(1{dimensionless}+Nai/K3ni));
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*Vm/RTOnF)/do;
    k23 = Nao/K1no*Nao/K2no*(1{dimensionless}+Nao/K3no)*exp(-Qn*Vm/(2{dimensionless}*RTOnF))/do;
    k32 = exp(Qn*Vm/(2{dimensionless}*RTOnF));
    do = 1{dimensionless}+Cao/Kco*(1{dimensionless}+exp(Qco*Vm/RTOnF))+Nao/K1no*(1{dimensionless}+Nao/K2no*(1{dimensionless}+Nao/K3no));
  enddef;

  def comp j_SRCarel as
    var j_SRCarel: millimolar_per_millisecond {pub: out};
    var R: dimensionless {init: 0.688047760973};
    var O: dimensionless {init: 1.7340201253e-7};
    var I: dimensionless {init: 7.86181717518e-8};
    var RI: dimensionless {init: 0.311951987007};
    var ks: per_millisecond {init: 250000};
    var MaxSR: dimensionless {init: 15};
    var MinSR: dimensionless {init: 1};
    var EC50_SR: millimolar {init: 0.45};
    var HSR: dimensionless {init: 2.5};
    var koSRCa: per_millimolar2_millisecond;
    var kiSRCa: per_millimolar_millisecond;
    var koCa: per_millimolar2_millisecond {init: 10};
    var kiCa: per_millimolar_millisecond {init: 0.5};
    var kCaSR: dimensionless;
    var kim: per_millisecond {init: 0.005};
    var kom: per_millisecond {init: 0.06};
    var time: millisecond {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    j_SRCarel = ks*O*(Ca_jsr-Ca_sub);
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(EC50_SR/Ca_jsr, HSR));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    ode(R, time) = kim*RI-kiSRCa*Ca_sub*R-(koSRCa*sqr(Ca_sub)*R-kom*O);
    ode(O, time) = koSRCa*sqr(Ca_sub)*R-kom*O-(kiSRCa*Ca_sub*O-kim*I);
    ode(I, time) = kiSRCa*Ca_sub*O-kim*I-(kom*I-koSRCa*sqr(Ca_sub)*RI);
    ode(RI, time) = kom*I-koSRCa*sqr(Ca_sub)*RI-(kim*RI-kiSRCa*Ca_sub*R);
  enddef;

  def comp intracellular_calcium_fluxes as
    var j_Ca_dif: millimolar_per_millisecond {pub: out};
    var j_up: millimolar_per_millisecond {pub: out};
    var j_tr: millimolar_per_millisecond {pub: out};
    var tau_dif_Ca: millisecond {init: 0.04};
    var tau_tr: millisecond {init: 40};
    var P_up: millimolar_per_millisecond {init: 0.012};
    var K_up: millimolar {init: 0.0006};
    var Ca_nsr: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    j_Ca_dif = (Ca_sub-Cai)/tau_dif_Ca;
    j_up = P_up/(1{dimensionless}+K_up/Cai);
    j_tr = (Ca_nsr-Ca_jsr)/tau_tr;
  enddef;

  def comp calcium_buffering as
    var TC_tot: millimolar {init: 0.031, pub: out};
    var TMC_tot: millimolar {init: 0.062, pub: out};
    var CM_tot: millimolar {init: 0.045, pub: out};
    var CQ_tot: millimolar {init: 10, pub: out};
    var delta_fTC: per_millisecond {pub: out};
    var delta_fTMC: per_millisecond {pub: out};
    var delta_fCMs: per_millisecond {pub: out};
    var delta_fCMi: per_millisecond {pub: out};
    var delta_fCQ: per_millisecond {pub: out};
    var delta_fTMM: per_millisecond;
    var fTMM: dimensionless {init: 0.501049376634};
    var fCMi: dimensionless {init: 0.0594880901438};
    var fCMs: dimensionless {init: 0.054381370046};
    var fTC: dimensionless {init: 0.0291316176172};
    var fTMC: dimensionless {init: 0.432694959597};
    var fCQ: dimensionless {init: 0.273207128393};
    var kf_TC: per_millimolar_millisecond {init: 88.8};
    var kf_TMM: per_millimolar_millisecond {init: 2.277};
    var kf_TMC: per_millimolar_millisecond {init: 227.7};
    var kf_CM: per_millimolar_millisecond {init: 227.7};
    var kf_CQ: per_millimolar_millisecond {init: 0.534};
    var kb_TC: per_millisecond {init: 0.446};
    var kb_TMC: per_millisecond {init: 0.00751};
    var kb_TMM: per_millisecond {init: 0.751};
    var kb_CM: per_millisecond {init: 0.542};
    var kb_CQ: per_millisecond {init: 0.445};
    var time: millisecond {pub: in};
    var Mgi: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    ode(fTC, time) = delta_fTC;
    delta_fTC = kf_TC*Cai*(1{dimensionless}-fTC)-kb_TC*fTC;
    ode(fTMC, time) = delta_fTMC;
    delta_fTMC = kf_TMC*Cai*(1{dimensionless}-(fTMC+fTMM))-kb_TMC*fTMC;
    ode(fTMM, time) = delta_fTMM;
    delta_fTMM = kf_TMM*Mgi*(1{dimensionless}-(fTMC+fTMM))-kb_TMM*fTMM;
    ode(fCMi, time) = delta_fCMi;
    delta_fCMi = kf_CM*Cai*(1{dimensionless}-fCMi)-kb_CM*fCMi;
    ode(fCMs, time) = delta_fCMs;
    delta_fCMs = kf_CM*Ca_sub*(1{dimensionless}-fCMs)-kb_CM*fCMs;
    ode(fCQ, time) = delta_fCQ;
    delta_fCQ = kf_CQ*Ca_jsr*(1{dimensionless}-fCQ)-kb_CQ*fCQ;
  enddef;

  def comp calcium_dynamics as
    var Cai: millimolar {init: 0.000150018670943, pub: out};
    var Ca_nsr: millimolar {init: 1.49348117734, pub: out};
    var Ca_jsr: millimolar {init: 0.316762674605, pub: out};
    var Ca_sub: millimolar {init: 0.000138112560112, pub: out};
    var V_i: picolitre {pub: in};
    var V_jsr: picolitre {pub: in};
    var V_nsr: picolitre {pub: in};
    var V_sub: picolitre {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_b_Ca: picoA {pub: in};
    var i_CaL: picoA {pub: in};
    var i_CaT: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var j_SRCarel: millimolar_per_millisecond {pub: in};
    var j_Ca_dif: millimolar_per_millisecond {pub: in};
    var j_tr: millimolar_per_millisecond {pub: in};
    var j_up: millimolar_per_millisecond {pub: in};
    var TMC_tot: millimolar {pub: in};
    var CM_tot: millimolar {pub: in};
    var TC_tot: millimolar {pub: in};
    var CQ_tot: millimolar {pub: in};
    var delta_fTMC: per_millisecond {pub: in};
    var delta_fCMi: per_millisecond {pub: in};
    var delta_fCMs: per_millisecond {pub: in};
    var delta_fTC: per_millisecond {pub: in};
    var delta_fCQ: per_millisecond {pub: in};
    ode(Cai, time) = (j_Ca_dif*V_sub-j_up*V_nsr)/V_i-(CM_tot*delta_fCMi+TC_tot*delta_fTC+TMC_tot*delta_fTMC);
    ode(Ca_sub, time) = j_SRCarel*V_jsr/V_sub-((i_CaL+i_CaT+i_b_Ca-2{dimensionless}*i_NaCa)/(2{dimensionless}*F*V_sub)+j_Ca_dif+CM_tot*delta_fCMs);
    ode(Ca_nsr, time) = j_up-j_tr*V_jsr/V_nsr;
    ode(Ca_jsr, time) = j_tr-(j_SRCarel+CQ_tot*delta_fCQ);
  enddef;

  def comp model_parameters as
    var Cao: millimolar {init: 2, pub: out};
    var Nai: millimolar {init: 10, pub: out};
    var Nao: millimolar {init: 140, pub: out};
    var Ki: millimolar {init: 140, pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
    var Mgi: millimolar {init: 2.5, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.4, pub: out};
    var T: kelvin {init: 310.15, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var Cm: picoF {init: 32, pub: out};
    var V_sub: picolitre {pub: out};
    var V_jsr: picolitre {pub: out};
    var V_nsr: picolitre {pub: out};
    var V_i: picolitre {pub: out};
    var V_cell: picolitre;
    var V_jsr_part: dimensionless {init: 0.0012};
    var V_i_part: dimensionless {init: 0.46};
    var V_nsr_part: dimensionless {init: 0.0116};
    var R_cell: micrometre {init: 4};
    var L_cell: micrometre {init: 70};
    var L_sub: micrometre {init: 0.02};
    V_cell = 0.001{picolitre_per_femtolitre}*pi*sqr(R_cell)*L_cell;
    V_sub = 0.001{picolitre_per_femtolitre}*2{dimensionless}*pi*L_sub*(R_cell-L_sub/2{dimensionless})*L_cell;
    V_jsr = V_jsr_part*V_cell;
    V_i = V_i_part*V_cell-V_sub;
    V_nsr = V_nsr_part*V_cell;
  enddef;

  def group as encapsulation for
    comp i_CaL incl
      comp i_CaL_dL_gate;
      comp i_CaL_fL_gate;
      comp i_CaL_fCa_gate;
    endcomp;
    comp i_CaT incl
      comp i_CaT_dT_gate;
      comp i_CaT_fT_gate;
    endcomp;
    comp i_Kr incl
      comp i_Kr_pa_gate;
      comp i_Kr_pi_gate;
    endcomp;
    comp i_Ks incl
      comp i_Ks_n_gate;
    endcomp;
    comp AP_sensitive_currents incl
      comp AP_sensitive_currents_q_gate;
      comp AP_sensitive_currents_r_gate;
    endcomp;
    comp i_f incl
      comp i_f_y_gate;
    endcomp;
    comp i_st incl
      comp i_st_qa_gate;
      comp i_st_qi_gate;
    endcomp;
  enddef;
  def map between Vm and environment for
    vars time and time;
  enddef;
  def map between i_CaL and environment for
    vars time and time;
  enddef;
  def map between i_CaT and environment for
    vars time and time;
  enddef;
  def map between i_Kr and environment for
    vars time and time;
  enddef;
  def map between i_Ks and environment for
    vars time and time;
  enddef;
  def map between AP_sensitive_currents and environment for
    vars time and time;
  enddef;
  def map between i_f and environment for
    vars time and time;
  enddef;
  def map between i_st and environment for
    vars time and time;
  enddef;
  def map between i_NaCa and environment for
    vars time and time;
  enddef;
  def map between i_NaK and environment for
    vars time and time;
  enddef;
  def map between j_SRCarel and environment for
    vars time and time;
  enddef;
  def map between calcium_buffering and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between i_CaL and Vm for
    vars Vm and Vm;
    vars i_CaL and i_CaL;
  enddef;
  def map between i_CaT and Vm for
    vars Vm and Vm;
    vars i_CaT and i_CaT;
  enddef;
  def map between i_Kr and Vm for
    vars Vm and Vm;
    vars i_Kr and i_Kr;
  enddef;
  def map between i_Ks and Vm for
    vars Vm and Vm;
    vars i_Ks and i_Ks;
  enddef;
  def map between AP_sensitive_currents and Vm for
    vars Vm and Vm;
    vars i_to and i_to;
    vars i_sus and i_sus;
  enddef;
  def map between i_f and Vm for
    vars Vm and Vm;
    vars i_f and i_f;
  enddef;
  def map between i_st and Vm for
    vars Vm and Vm;
    vars i_st and i_st;
  enddef;
  def map between i_b_Na and Vm for
    vars Vm and Vm;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between i_b_Ca and Vm for
    vars Vm and Vm;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between i_NaK and Vm for
    vars Vm and Vm;
    vars i_NaK and i_NaK;
  enddef;
  def map between i_NaCa and Vm for
    vars Vm and Vm;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Vm and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between electric_potentials and model_parameters for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ki and Ki;
    vars Ko and Ko;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between electric_potentials and i_Kr for
    vars E_K and E_K;
  enddef;
  def map between electric_potentials and i_Ks for
    vars E_Ks and E_Ks;
  enddef;
  def map between electric_potentials and AP_sensitive_currents for
    vars E_K and E_K;
  enddef;
  def map between i_f and electric_potentials for
    vars E_Na and E_Na;
    vars E_K and E_K;
  enddef;
  def map between electric_potentials and i_b_Na for
    vars E_Na and E_Na;
  enddef;
  def map between electric_potentials and i_NaK for
    vars E_Na and E_Na;
  enddef;
  def map between i_CaL and calcium_dynamics for
    vars Ca_sub and Ca_sub;
    vars i_CaL and i_CaL;
  enddef;
  def map between i_CaL and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between i_CaT and calcium_dynamics for
    vars i_CaT and i_CaT;
  enddef;
  def map between i_CaT and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between i_Kr and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between i_Ks and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between AP_sensitive_currents and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between i_f and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between i_st and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between i_b_Na and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between i_b_Ca and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between i_b_Ca and calcium_dynamics for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between i_b_Ca and i_CaL for
    vars E_CaL and E_CaL;
  enddef;
  def map between i_NaK and model_parameters for
    vars Cm and Cm;
    vars Nai and Nai;
    vars Ko and Ko;
  enddef;
  def map between i_NaCa and model_parameters for
    vars Cm and Cm;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Cao and Cao;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between i_NaCa and calcium_dynamics for
    vars Ca_sub and Ca_sub;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between j_SRCarel and calcium_dynamics for
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
    vars j_SRCarel and j_SRCarel;
  enddef;
  def map between calcium_buffering and model_parameters for
    vars Mgi and Mgi;
  enddef;
  def map between calcium_dynamics and model_parameters for
    vars F and F;
    vars V_sub and V_sub;
    vars V_i and V_i;
    vars V_nsr and V_nsr;
    vars V_jsr and V_jsr;
  enddef;
  def map between intracellular_calcium_fluxes and calcium_dynamics for
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
    vars Cai and Cai;
    vars Ca_nsr and Ca_nsr;
    vars j_Ca_dif and j_Ca_dif;
    vars j_up and j_up;
    vars j_tr and j_tr;
  enddef;
  def map between calcium_buffering and calcium_dynamics for
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
    vars Cai and Cai;
    vars TMC_tot and TMC_tot;
    vars CM_tot and CM_tot;
    vars TC_tot and TC_tot;
    vars CQ_tot and CQ_tot;
    vars delta_fTMC and delta_fTMC;
    vars delta_fCMi and delta_fCMi;
    vars delta_fCMs and delta_fCMs;
    vars delta_fTC and delta_fTC;
    vars delta_fCQ and delta_fCQ;
  enddef;
  def map between i_CaL and i_CaL_dL_gate for
    vars dL and dL;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_CaL and i_CaL_fL_gate for
    vars fL and fL;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_CaL and i_CaL_fCa_gate for
    vars fCa and fCa;
    vars time and time;
    vars Vm and Vm;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_CaT and i_CaT_dT_gate for
    vars dT and dT;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_CaT and i_CaT_fT_gate for
    vars fT and fT;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_Kr and i_Kr_pa_gate for
    vars paF and paF;
    vars paS and paS;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_Kr and i_Kr_pi_gate for
    vars pi_ and pi_;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_Ks and i_Ks_n_gate for
    vars n and n;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between AP_sensitive_currents and AP_sensitive_currents_q_gate for
    vars q and q;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between AP_sensitive_currents and AP_sensitive_currents_r_gate for
    vars r and r;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_f and i_f_y_gate for
    vars y and y;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_st and i_st_qa_gate for
    vars qa and qa;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_st and i_st_qi_gate for
    vars qi and qi;
    vars time and time;
    vars Vm and Vm;
  enddef;
enddef;
