<?xml version="1.0"?>
<!--
This CellML file was generated on 6/10/2009 at 11:36:19 at a.m. using:

COR (0.9.31.1319)
Copyright 2002-2009 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xml:base="file:///C:/Users/gnun003/Documents/Koivumaki/koivumaki_takalo_korhonen_tavi_weckstrom_2009_standalone.cellml" cmeta:id="koivumaki_takalo_korhonen_tavi_weckstrom_2009" name="koivumaki_takalo_korhonen_tavi_weckstrom_2009">
   
<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Modelling Sarcoplasmic Reticulum Calcium APTase and its Regulation in Cardiac Myocytes
</title>
				<author>
					<firstname>Geoffrey</firstname>
					<surname>Nunns</surname>
					<affiliation>
						<shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
				This CellML model runs in PCenv, COR and OpenCell to recreate the published results. This model only describes the standalone SERCA pump, and is based on the original matlab code dy_buffering_serca. Other versions of this model couple the SERCA pump to a reduced cardiac myocyte model.  
				</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: When developing large-scale mathematical models of physiology, some reduction in complexity is necessarily required to maintain computational efficiency. A prime example of such an intricate cell is the cardiac myocyte. For the predictive power of the cardiomyocyte models, it is vital to accurately describe the calcium transport mechanisms, since they essentially link the electrical activation to contractility. The removal of calcium from the cytoplasm takes place mainly by the Na(+)/Ca(2+) exchanger, and the sarcoplasmic reticulum Ca(2+) ATPase (SERCA). In the present study, we review the properties of SERCA, its frequency-dependent and beta-adrenergic regulation, and the approaches of mathematical modelling that have been used to investigate its function. Furthermore, we present novel theoretical considerations that might prove useful for the elucidation of the role of SERCA in cardiac function, achieving a reduction in model complexity, but at the same time retaining the central aspects of its function. Our results indicate that to faithfully predict the physiological properties of SERCA, we should take into account the calcium-buffering effect and reversible function of the pump. This 'uncomplicated' modelling approach could be useful to other similar transport mechanisms as well.
</para>

<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>model diagram</title>
							</objectinfo>
							<imagedata fileref="koivumaki_2009a.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of SERCA pump.</caption>
				</informalfigure>
				
				<para>
The original paper reference is cited below:
</para>
				<para>
Modelling Sarcoplasmic Reticulum Calcium APTase and its Regulation in Cardiac Myocytes, Jussi T. Koivumaki, Jouni Takalo, Topi Korhonen, Pasi Tavi, Matti Weckstrom, 2009, <emphasis>Phil. Trans. R. Soc. A</emphasis>, volume 367, 2181-2202.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=19414452&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 19414452</ulink>
				</para>
				
				
			</sect1>
		</article>
	</documentation>   
   
   
   
   
   
   
   
   <units name="uM">
      <unit prefix="micro" units="mole"/>
      <unit exponent="-1" units="liter"/>
   </units>
   <units name="per_uM2">
      <unit exponent="-2" units="uM"/>
   </units>
   <units name="msec">
      <unit prefix="milli" units="second"/>
   </units>
   <units name="per_msec">
      <unit exponent="-1" prefix="milli" units="second"/>
   </units>
   <units name="uM_per_msec">
      <unit units="uM"/>
      <unit exponent="-1" prefix="milli" units="second"/>
   </units>
   <units name="per_msec_per_uM2">
      <unit exponent="-1" prefix="milli" units="second"/>
      <unit exponent="-2" units="uM"/>
   </units>
   <component name="environment">
      <variable name="time" public_interface="out" units="msec"/>
   </component>
   <component name="general_parameters">
      <variable initial_value="0.25" name="Ca_cyt" public_interface="out" units="uM"/>
      <variable initial_value="760" name="Ca_NSR" public_interface="out" units="uM"/>
      <variable initial_value="0" name="CaMKII_reg" public_interface="out" units="dimensionless"/>
   </component>
   <component name="serca_parameters">
      <variable initial_value="47" name="SERCA_TOT" public_interface="out" units="uM"/>
      <variable initial_value="1" name="PSR" units="dimensionless"/>
      <variable initial_value="0.15" name="Kmf_PLBKO" units="uM"/>
      <variable initial_value="0.15" name="Kmf_PLB" units="uM"/>
      <variable initial_value="2500" name="Kmr_PLBKO" units="uM"/>
      <variable initial_value="1110" name="Kmr_PLB" units="uM"/>
      <variable name="EC_50_fwd" public_interface="out" units="uM"/>
      <variable name="EC_50_rev" public_interface="out" units="uM"/>
      <variable name="CaMKII_reg" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>EC_50_fwd</ci>
            <apply>
               <times/>
               <apply>
                  <plus/>
                  <ci>Kmf_PLBKO</ci>
                  <apply>
                     <times/>
                     <ci>Kmf_PLB</ci>
                     <ci>PSR</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.27</cn>
                     <ci>CaMKII_reg</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>EC_50_rev</ci>
            <apply>
               <minus/>
               <ci>Kmr_PLBKO</ci>
               <apply>
                  <times/>
                  <ci>Kmr_PLB</ci>
                  <ci>PSR</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="transition_parameters">
      <variable name="k_cyt_serca" public_interface="out" units="per_msec_per_uM2"/>
      <variable name="k_serca_cyt" public_interface="out" units="per_msec"/>
      <variable name="k_serca_sr" public_interface="out" units="per_msec"/>
      <variable name="k_sr_serca" public_interface="out" units="per_msec_per_uM2"/>
      <variable name="br_cyt_serca" units="per_msec_per_uM2"/>
      <variable initial_value="0.00625" name="br_serca_sr" units="per_msec"/>
      <variable name="CaMKII_reg" public_interface="in" units="dimensionless"/>
      <variable name="EC_50_fwd" public_interface="in" units="uM"/>
      <variable name="EC_50_rev" public_interface="in" units="uM"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>br_cyt_serca</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_uM2">1000</cn>
               <ci>br_serca_sr</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>k_cyt_serca</ci>
            <apply>
               <times/>
               <ci>br_cyt_serca</ci>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.7</cn>
                     <ci>CaMKII_reg</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>k_serca_cyt</ci>
            <apply>
               <times/>
               <apply>
                  <power/>
                  <ci>EC_50_fwd</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
               </apply>
               <ci>br_cyt_serca</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>k_serca_sr</ci>
            <apply>
               <times/>
               <ci>br_serca_sr</ci>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.7</cn>
                     <ci>CaMKII_reg</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>k_sr_serca</ci>
            <apply>
               <divide/>
               <ci>br_serca_sr</ci>
               <apply>
                  <power/>
                  <ci>EC_50_rev</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="calcium_fluxes">
      <variable name="J_cyt_serca" public_interface="out" units="uM_per_msec"/>
      <variable name="J_serca_sr" public_interface="out" units="uM_per_msec"/>
      <variable name="Ca_cyt" public_interface="in" units="uM"/>
      <variable name="Ca_NSR" public_interface="in" units="uM"/>
      <variable name="SERCA_TOT" public_interface="in" units="uM"/>
      <variable name="k_cyt_serca" public_interface="in" units="per_msec_per_uM2"/>
      <variable name="k_serca_cyt" public_interface="in" units="per_msec"/>
      <variable name="k_serca_sr" public_interface="in" units="per_msec"/>
      <variable name="k_sr_serca" public_interface="in" units="per_msec_per_uM2"/>
      <variable name="Ca_serca" public_interface="in" units="uM"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>J_cyt_serca</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k_cyt_serca</ci>
                  <apply>
                     <power/>
                     <ci>Ca_cyt</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                  </apply>
                  <apply>
                     <minus/>
                     <ci>SERCA_TOT</ci>
                     <ci>Ca_serca</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_serca_cyt</ci>
                  <ci>Ca_serca</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>J_serca_sr</ci>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k_serca_sr</ci>
                  <ci>Ca_serca</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k_sr_serca</ci>
                  <apply>
                     <power/>
                     <ci>Ca_NSR</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                  </apply>
                  <apply>
                     <minus/>
                     <ci>SERCA_TOT</ci>
                     <ci>Ca_serca</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="calcium_bound_serca">
      <variable initial_value="12" name="Ca_serca" public_interface="out" units="uM"/>
      <variable name="time" public_interface="in" units="msec"/>
      <variable name="J_cyt_serca" public_interface="in" units="uM_per_msec"/>
      <variable name="J_serca_sr" public_interface="in" units="uM_per_msec"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca_serca</ci>
            </apply>
            <apply>
               <minus/>
               <ci>J_cyt_serca</ci>
               <ci>J_serca_sr</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="calcium_bound_serca"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="general_parameters" component_2="serca_parameters"/>
      <map_variables variable_1="CaMKII_reg" variable_2="CaMKII_reg"/>
   </connection>
   <connection>
      <map_components component_1="general_parameters" component_2="transition_parameters"/>
      <map_variables variable_1="CaMKII_reg" variable_2="CaMKII_reg"/>
   </connection>
   <connection>
      <map_components component_1="general_parameters" component_2="calcium_fluxes"/>
      <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
      <map_variables variable_1="Ca_NSR" variable_2="Ca_NSR"/>
   </connection>
   <connection>
      <map_components component_1="serca_parameters" component_2="transition_parameters"/>
      <map_variables variable_1="EC_50_fwd" variable_2="EC_50_fwd"/>
      <map_variables variable_1="EC_50_rev" variable_2="EC_50_rev"/>
   </connection>
   <connection>
      <map_components component_1="serca_parameters" component_2="calcium_fluxes"/>
      <map_variables variable_1="SERCA_TOT" variable_2="SERCA_TOT"/>
   </connection>
   <connection>
      <map_components component_1="transition_parameters" component_2="calcium_fluxes"/>
      <map_variables variable_1="k_cyt_serca" variable_2="k_cyt_serca"/>
      <map_variables variable_1="k_serca_cyt" variable_2="k_serca_cyt"/>
      <map_variables variable_1="k_serca_sr" variable_2="k_serca_sr"/>
      <map_variables variable_1="k_sr_serca" variable_2="k_sr_serca"/>
   </connection>
   <connection>
      <map_components component_1="calcium_fluxes" component_2="calcium_bound_serca"/>
      <map_variables variable_1="J_cyt_serca" variable_2="J_cyt_serca"/>
      <map_variables variable_1="J_serca_sr" variable_2="J_serca_sr"/>
      <map_variables variable_1="Ca_serca" variable_2="Ca_serca"/>
   </connection>
   
   
   <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
  <foo xmlns="http://www.example.org/foo/bar/baz" /> 
- <!-- 
      The following RDF block contains metadata that applies to this document
      as a whole, as indicated by the empty about attribute on the 
      <rdf:Description> element.
    

  --> 
- <rdf:Description rdf:about="">
- <!-- 
        The Model Builder Metadata.  The Dublin Core "creator" element is used  
        to indicate the person who translated the model into CellML.
      

  --> 
- <dc:creator rdf:parseType="Resource">
- <vCard:N rdf:parseType="Resource">
  <vCard:Family>Nunns</vCard:Family> 
  <vCard:Given>Geoffrey</vCard:Given> 
  <vCard:Other>Rogan</vCard:Other> 
  </vCard:N>
- <vCard:EMAIL rdf:parseType="Resource">
  <rdf:value>gnunns1@jhu.edu</rdf:value> 
  <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet" /> 
  </vCard:EMAIL>
- <vCard:ORG rdf:parseType="Resource">
  <vCard:Orgname>The University of Auckland</vCard:Orgname> 
  <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit> 
  </vCard:ORG>
  </dc:creator>
- <!-- 
        The Creation Date metadata. This is the date on which the model
        was translated into CellML.
      

  --> 
- <dcterms:created rdf:parseType="Resource">
  <dcterms:W3CDTF>2009-10-06</dcterms:W3CDTF> 
  </dcterms:created>
- <!-- 
        The Modification History metadata. This lists the changes that have been
        made to the document, who made the changes, and when they were made.
      

  --> 
  </rdf:Description>
- <!-- 
      The following metadata refers to the model itself, as indicated by the
      reference to the ID "koivumaki_takalo_korhonen_tavi_weckstrom_2009", which is    
      declared on the <model> element.
    

  --> 
- <rdf:Description rdf:about="#koivumaki_takalo_korhonen_tavi_weckstrom_2009">
- <!--  A human readable name for the model. 
  --> 
  <dc:title>The Koivumaki et al. 2009 model of SERCA pump dynamics and regulation in cardiac myocytes</dc:title> 
- <!--  A comment regarding the model. 
  --> 
- <cmeta:comment rdf:parseType="Resource">
  <rdf:value>This is the CellML description of Koivumaki et al.'s mathematical model of SERCA pump dynamics and regulation in cardiac myocyte</rdf:value> 
- <!--  The creator of the comment. 
  --> 
- <dc:creator rdf:parseType="Resource">
  <vCard:FN>Geoffrey Nunns</vCard:FN> 
  </dc:creator>
  </cmeta:comment>
  <cmeta:species>Human</cmeta:species> 
  <cmeta:bio_entity>cardiac myocyte</cmeta:bio_entity> 
- <!--   Keyword(s) 
  --> 
- <bqs:reference rdf:parseType="Resource">
- <dc:subject rdf:parseType="Resource">
  <bqs:subject_type>keyword</bqs:subject_type> 
- <rdf:value>
- <rdf:Bag>
  <rdf:li>electrophysiology and signal transduction</rdf:li> 
  <rdf:li>cardiac</rdf:li> 
  </rdf:Bag>
  </rdf:value>
  </dc:subject>
  </bqs:reference>
- <bqs:reference rdf:parseType="Resource">
  <bqs:Pubmed_id>19414452</bqs:Pubmed_id> 
- <bqs:JournalArticle rdf:parseType="Resource">
- <dc:creator>
- <rdf:Seq>
- <rdf:li rdf:parseType="Resource">
- <bqs:Person rdf:parseType="Resource">
- <vCard:N rdf:parseType="Resource">
  <vCard:Family>Koivumaki</vCard:Family> 
  <vCard:Given>Jussi</vCard:Given> 
  <vCard:Other>T</vCard:Other> 
  </vCard:N>
  </bqs:Person>
  </rdf:li>
- <rdf:li rdf:parseType="Resource">
- <bqs:Person rdf:parseType="Resource">
- <vCard:N rdf:parseType="Resource">
  <vCard:Family>Takalo</vCard:Family> 
  <vCard:Given>Jouni</vCard:Given> 
  </vCard:N>
  </bqs:Person>
  </rdf:li>
- <rdf:li rdf:parseType="Resource">
- <bqs:Person rdf:parseType="Resource">
- <vCard:N rdf:parseType="Resource">
  <vCard:Family>Korhonen</vCard:Family> 
  <vCard:Given>Topi</vCard:Given> 
  </vCard:N>
  </bqs:Person>
  </rdf:li>
  - <rdf:li rdf:parseType="Resource">
- <bqs:Person rdf:parseType="Resource">
- <vCard:N rdf:parseType="Resource">
  <vCard:Family>Tavi</vCard:Family> 
  <vCard:Given>Pasi</vCard:Given> 
  </vCard:N>
  </bqs:Person>
  </rdf:li>
  - <rdf:li rdf:parseType="Resource">
- <bqs:Person rdf:parseType="Resource">
- <vCard:N rdf:parseType="Resource">
  <vCard:Family>Weckstrom</vCard:Family> 
  <vCard:Given>Matti</vCard:Given> 
  </vCard:N>
  </bqs:Person>
  </rdf:li>
- 
  </rdf:Seq>
  </dc:creator>
  <dc:title>Modelling Sarcoplasmic Reticulum Calcium APTase and its Regulation in Cardiac Myocytes</dc:title> 
- <dcterms:issued rdf:parseType="Resource">
  <dcterms:W3CDTF>2009-03-04</dcterms:W3CDTF> 
  </dcterms:issued>
- <bqs:Journal rdf:parseType="Resource">
  <dc:title>Phil. Trans. R. Soc. A</dc:title> 
  </bqs:Journal>
  <bqs:volume>367</bqs:volume> 
  <bqs:first_page>2181</bqs:first_page> 
  <bqs:last_page>2202</bqs:last_page> 
  </bqs:JournalArticle>
  </bqs:reference>
  </rdf:Description>
  </rdf:RDF>
   
   
   
   
   
   
</model>