// This CellML file was generated on 18/04/2008 at 09:25:32 using:
//
// COR (0.9.31.915)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// created: W3CDTF 2008-04-29T00:00:00+00:00
// comment: This model has been curated and unit checked by Alan Garny in collaboration with the model authors and it is known to run in COR to reproduce the published results.; FN Catherine Lloyd
// modification: Worked with the original model authors and used their source code to get the CellML version of the model running to recreate the published results.; W3CDTF 2008-04-29T22:44:24+12:00; Given Alan; Family Garny
// creator: Given Alan; Family Garny; Orgname University of Oxford; alan.garny@dpag.ox.ac.uk
// reference: _1 cardiac; _2 electrophysiology; _3 Sinoatrial Node; subject_type keyword
// reference: title Japanese Journal of Physiology; last_page 134; W3CDTF 2003-04-00 00:00; first_page 125; title Role of individual ionic current systems in the SA node hypothesized by a model study; Given Nobuaki; Family Sarai; Given Satoshi; Family Matsuoka; Given Shinobu; Family Kuratomi; Given Kyoichi; Family Ono; Given Akinori; Family Noma; volume 53; Pubmed_id 12877768
// simulation: maximumStepSize 10; endingValue 1000; pointDensity 10000
def model sarai_model_2003 as
  // Modelling the Roles of Individual Current Systems in Ventricular Cells and in the SA Node
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model has been curated and unit checked by Alan Garny in collaboration with the model authors and it is known to run in OpenCell and COR to reproduce the published results. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: This paper discusses the development of a cardiac sinoatrial (SA) node pacemaker model. The model successfully reconstructs the experimental action potentials at various concentrations of external Ca2+ and K+. Increasing the amplitude of L-type Ca2+ current (I(CaL)) prolongs the duration of the action potential and thereby slightly decreases the spontaneous rate. On the other hand, a negative voltage shift of I(CaL) gating by a few mV markedly increases the spontaneous rate. When the amplitude of sustained inward current (I(st)) is increased, the spontaneous rate is increased irrespective of the I(CaL) amplitude. Increasing [Ca2+](o) shortens the action potential and increases the spontaneous rate. When the spontaneous activity is stopped by decreasing I(CaL) amplitude, the resting potential is nearly constant (-35 mV) over 1-15 mM [K+](o) as observed in the experiment. This is because the conductance of the inward background non-selective cation current balances with the outward [K+](o)-dependent K+ conductance. The unique role of individual voltage- and time-dependent ion channels is clearly demonstrated and distinguished from that of the background current by calculating an instantaneous zero current potential ("lead potential") during the course of the spontaneous activity.
  //
  // The original paper reference is cited below:
  //
  // Role of Individual Ionic Current Systems in the SA Node Hypothesized by a Model Study, Sarai N, Matsuoka S, Kuratomi S, Ono K, and Noma A, 2003, The Japanese Journal of Physiology, 53, 125-134. PubMed ID: 12877768 (http://www.ncbi.nlm.nih.gov/pubmed/12877768)
  //
  // SA node cell diagram
  //
  // A schematic diagram describing the ionic components of the Matsuoka et al. 2003 SA node cell mathematical model. Unique to the SA node cells are the acetylecholine-activated K+ current, IKACh, the hyperpolarisation-activated cation current, Iha, and the sustained inward current Ist.
  //
  // reaction kinetics diagram
  //
  // A schematic diagram describing the reaction kinetics of the ion channel gates in the Matsuoka et al. 2003 mathematical models. A) The kinetics of the sodium channel voltage-dependent gate. B) The kinetics of the Na-Ca exchange pump. C) The kinetics of the Na-K pump. D) The kinetics of the inward rectifier K+ current. E) The kinetics of the Ca2+-dependent gate of the L-type Ca2+ channel. F) The kinetics of the ultra-slow gates of several ion channels. G) The kinetics of the SR Ca2+ pump. H) The kinetics of the hyperpolarisation-activated cation current. I) The kinetics of the RyR channel in the SR.
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit millimole as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar2 as
    unit millimolar {expo: 2};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar_per_picoA as
    unit millimolar;
    unit picoA {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_micromolar2 as
    unit micromolar {expo: -2};
  enddef;
  def unit second_per_micromolar2 as
    unit second;
    unit micromolar {expo: -2};
  enddef;
  def unit millisecond_per_micrometre2 as
    unit millisecond;
    unit micrometre {expo: -2};
  enddef;
  def unit mN_per_mm2 as
    unit newton {pref: milli};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit mN_per_mm2_micrometre as
    unit mN_per_mm2;
    unit micrometre {expo: -1};
  enddef;
  def unit mN_per_mm2_micrometre5 as
    unit mN_per_mm2;
    unit micrometre {expo: -5};
  enddef;
  def unit mN_per_mm2_micrometre_millimolar as
    unit newton {pref: milli};
    unit metre {expo: -2, pref: milli};
    unit micrometre {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit per_micrometre2 as
    unit micrometre {expo: -2};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit micromolar_per_second as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit picoF_per_millisecond as
    unit picoF;
    unit millisecond {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit per_picoA_millisecond as
    unit picoA {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre_per_millisecond as
    unit micrometre;
    unit millisecond {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit nanoS_per_picoF as
    unit nanoS;
    unit picoF {expo: -1};
  enddef;
  def unit picoA_per_picoF as
    unit picoA;
    unit picoF {expo: -1};
  enddef;
  def unit nanoS_per_millimolar as
    unit nanoS;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA_per_millimolar as
    unit ampere {pref: pico};
    unit millimolar {expo: -1};
  enddef;
  def unit coulomb_millivolt_per_kelvin_millimole as
    unit coulomb;
    unit millivolt;
    unit kelvin {expo: -1};
    unit millimole {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var Vm: millivolt {init: -42.987671350068005, pub: out};
    var R: coulomb_millivolt_per_kelvin_millimole {init: 8.3143, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_millimole {init: 96.4867, pub: out};
    var Cm: picoF {init: 32, pub: out};
    var i_tot: picoA;
    var i_I: picoA;
    var time: millisecond {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_Ca_T: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_st: picoA {pub: in};
    var i_ha: picoA {pub: in};
    var i_KACh: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_bNSC: picoA {pub: in};
    var i_Cab: picoA {pub: in};
    var i_Kpl: picoA {pub: in};
    var i_lCa: picoA {pub: in};
    var i_KATP: picoA {pub: in};
    ode(Vm, time) = -i_tot/Cm;
    i_tot = i_Na+i_Ca_L+i_Ca_T+i_K1+i_Kr+i_I+i_NaK+i_NaCa+i_st+i_ha+i_KACh;
    i_I = i_bNSC+i_Cab+i_Kpl+i_lCa+i_KATP;
  enddef;

  def comp external_ion_concentrations as
    var Nao: millimolar {init: 139.99977217549068, pub: out};
    var Cao: millimolar {init: 1.7999668787634697, pub: out};
    var Ko: millimolar {init: 5.399964171929831, pub: out};
  enddef;

  def comp internal_ion_concentrations as
    var Nai: millimolar {init: 4.6808027298969925, pub: out};
    var Cai: millimolar {pub: out};
    var Ki: millimolar {init: 139.22099524072777, pub: out};
    var Vi: micrometre3 {init: 2513.25, pub: out};
    var i_net_Na: picoA;
    var i_net_K: picoA;
    var i_net_Ca: picoA;
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_Na_Na: picoA {pub: in};
    var i_CaL_Na: picoA {pub: in};
    var i_st_Na: picoA {pub: in};
    var i_ha_Na: picoA {pub: in};
    var i_bNSC_Na: picoA {pub: in};
    var i_lCa_Na: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_KACh: picoA {pub: in};
    var i_KATP: picoA {pub: in};
    var i_Na_K: picoA {pub: in};
    var i_CaL_K: picoA {pub: in};
    var i_st_K: picoA {pub: in};
    var i_ha_K: picoA {pub: in};
    var i_bNSC_K: picoA {pub: in};
    var i_lCa_K: picoA {pub: in};
    var i_Kpl: picoA {pub: in};
    var i_CaL_Ca: picoA {pub: in};
    var i_Ca_T: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_bNSC: picoA {pub: in};
    var i_Cab: picoA {pub: in};
    var i_RyR: picoA {pub: in};
    var i_SR_U: picoA {pub: in};
    var i_SR_L: picoA {pub: in};
    var dCaidt_NL: millimolar_per_millisecond {pub: in};
    var CMDN_max: millimolar {init: 0.05};
    var K_mCMDN: millimolar {init: 0.00238};
    var Ca_Total: millimolar {init: 0.003834100516470642};
    var b1: millimolar;
    var c1: millimolar2;
    b1 = CMDN_max-Ca_Total+K_mCMDN;
    c1 = K_mCMDN*Ca_Total;
    Cai = (sqrt(sqr(b1)+4{dimensionless}*c1)-b1)/2{dimensionless};
    ode(Nai, time) = -i_net_Na/(F*Vi);
    ode(Ki, time) = -i_net_K/(F*Vi);
    ode(Ca_Total, time) = -(i_net_Ca-i_SR_U-i_RyR-i_SR_L)/(2{dimensionless}*F*Vi)+dCaidt_NL;
    i_net_Na = i_Na_Na+i_CaL_Na+i_st_Na+i_ha_Na+i_bNSC_Na+i_lCa_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa;
    i_net_K = i_K1+i_Kr+i_KATP+i_KACh+i_Na_K+i_CaL_K+i_st_K+i_ha_K+i_bNSC_K+i_lCa_K+i_Kpl-2{dimensionless}*i_NaK;
    i_net_Ca = i_CaL_Ca+i_Ca_T+i_Cab-2{dimensionless}*i_NaCa;
  enddef;

  def comp constant_field_equations as
    var CF_Na: millimolar {pub: out};
    var CF_Ca: millimolar {pub: out};
    var CF_K: millimolar {pub: out};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var R: coulomb_millivolt_per_kelvin_millimole {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vm: millivolt {pub: in};
    CF_Na = sel
      case Vm == 0{millivolt}:
        -Nao;
      otherwise:
        F*Vm/(R*T)*(Nai-Nao*exp(-F*Vm/(R*T)))/(1{dimensionless}-exp(-F*Vm/(R*T)));
    endsel;
    CF_Ca = sel
      case Vm == 0{millivolt}:
        -Cao;
      otherwise:
        2{dimensionless}*F*Vm/(R*T)*(Cai-Cao*exp(-2{dimensionless}*F*Vm/(R*T)))/(1{dimensionless}-exp(-2{dimensionless}*F*Vm/(R*T)));
    endsel;
    CF_K = sel
      case Vm == 0{millivolt}:
        Ki;
      otherwise:
        F*Vm/(R*T)*(Ki-Ko*exp(-F*Vm/(R*T)))/(1{dimensionless}-exp(-F*Vm/(R*T)));
    endsel;
  enddef;

  def comp ATP_production as
    var ATPi: millimolar {init: 4.929308214702568, pub: out};
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    var dATPdt_NL: millimolar_per_millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vi: micrometre3 {pub: in};
    var i_NaK: picoA {pub: in};
    var i_SR_U: picoA {pub: in};
    var ProducingRate_Max: per_millisecond {init: 0.003};
    var Adenosine_Total: millimolar {init: 5};
    ode(ATPi, time) = ProducingRate_Max*(Adenosine_Total-ATPi)+dATPdt_NL-i_NaK/(F*Vi)+i_SR_U/(4{dimensionless}*F*Vi);
  enddef;

  def comp sodium_current as
    var i_Na: picoA {pub: out};
    var i_Na_Na: picoA {pub: out};
    var i_Na_K: picoA {pub: out};
    var P_Na: picoA_per_millimolar {init: 12};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var CF_Na: millimolar {pub: in};
    var CF_K: millimolar {pub: in};
    var p_AP_Na: dimensionless {priv: in};
    var y: dimensionless {priv: in};
    i_Na = i_Na_Na+i_Na_K;
    i_Na_Na = P_Na*CF_Na*p_AP_Na*y;
    i_Na_K = 0.1{dimensionless}*P_Na*CF_K*p_AP_Na*y;
  enddef;

  def comp sodium_current_voltage_dependent_gate as
    var p_AP_Na: dimensionless {init: 5.9898633533987405e-5, pub: out};
    var p_RI_Na: dimensionless;
    var p_RP_Na: dimensionless {init: 2.2262336890623873e-4};
    var p_AI_Na: dimensionless {init: 0.9715915109181413};
    var k_RP_AP: per_millisecond;
    var k_AP_RP: per_millisecond;
    var k_RI_AI: per_millisecond;
    var k_AI_RI: per_millisecond;
    var k_AP_AI: per_millisecond;
    var k_AI_AP: per_millisecond {init: 8.75e-5};
    var k_RP_RI: per_millisecond;
    var k_RI_RP: per_millisecond;
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    ode(p_RP_Na, time) = p_AP_Na*k_AP_RP+p_RI_Na*k_RI_RP-p_RP_Na*(k_RP_RI+k_RP_AP);
    ode(p_AP_Na, time) = p_RP_Na*k_RP_AP+p_AI_Na*k_AI_AP-p_AP_Na*(k_AP_RP+k_AP_AI);
    ode(p_AI_Na, time) = p_RI_Na*k_RI_AI+p_AP_Na*k_AP_AI-p_AI_Na*(k_AI_RI+k_AI_AP);
    p_RI_Na = 1{dimensionless}-p_RP_Na-p_AP_Na-p_AI_Na;
    k_RP_AP = 1{per_millisecond}/(0.1027{dimensionless}*exp(-Vm/8{millivolt})+0.25{dimensionless}*exp(-Vm/50{millivolt}));
    k_AP_RP = 1{per_millisecond}/(26{dimensionless}*exp(Vm/17{millivolt})+0.02{dimensionless}*exp(Vm/800{millivolt}));
    k_AP_AI = 1{per_millisecond}/(0.8{dimensionless}*exp(-Vm/400{millivolt}));
    k_AI_RI = 1{per_millisecond}/(1300{dimensionless}*exp(Vm/20{millivolt})+0.04{dimensionless}*exp(Vm/800{millivolt}));
    k_RI_AI = 1{per_millisecond}/(0.0001027{dimensionless}*exp(-Vm/8{millivolt})+5{dimensionless}*exp(-Vm/400{millivolt}));
    k_RP_RI = 0.01{per_millisecond}/(1{dimensionless}+k_AI_AP*k_AP_RP*k_RI_AI/(k_AP_AI*k_RP_AP*k_AI_RI));
    k_RI_RP = 0.01{per_millisecond}-k_RP_RI;
  enddef;

  def comp sodium_current_ultra_slow_gate as
    var y: dimensionless {init: 0.02691630436856424, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y = 1{per_millisecond}/(9000000000{dimensionless}*exp(Vm/5{millivolt})+8000{dimensionless}*exp(Vm/100{millivolt}));
    beta_y = 1{per_millisecond}/(0.014{dimensionless}*exp(-Vm/5{millivolt})+4000{dimensionless}*exp(-Vm/100{millivolt}));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: picoA {pub: out};
    var i_CaL_Na: picoA {pub: out};
    var i_CaL_Ca: picoA {pub: out};
    var i_CaL_K: picoA {pub: out};
    var p_open_CaL: dimensionless {priv: out, pub: out};
    var CaDiadic: picoA {priv: in, pub: out};
    var P_CaL: picoA_per_millimolar {init: 2112};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var CF_Na: millimolar {pub: in};
    var CF_Ca: millimolar {priv: out, pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var CF_K: millimolar {pub: in};
    var ATPi: millimolar {pub: in};
    var p_AP_CaL: dimensionless {priv: in};
    var p_U: dimensionless {priv: in};
    var p_UCa: dimensionless {priv: in};
    var y: dimensionless {priv: in};
    i_Ca_L = i_CaL_Na+i_CaL_Ca+i_CaL_K;
    i_CaL_Ca = P_CaL*CF_Ca*p_open_CaL;
    i_CaL_Na = 0.0000185{dimensionless}*P_CaL*CF_Na*p_open_CaL;
    i_CaL_K = 0.000365{dimensionless}*P_CaL*CF_K*p_open_CaL;
    p_open_CaL = p_AP_CaL*(p_U+p_UCa)*y/(1{dimensionless}+pow(1.4{millimolar}/ATPi, 3{dimensionless}));
  enddef;

  def comp L_type_Ca_channel_voltage_dependent_gate as
    var p_AP_CaL: dimensionless {init: 0.010773205742759775, pub: out};
    var p_RI_CaL: dimensionless;
    var p_RP_CaL: dimensionless {init: 0.42833044151885075};
    var p_AI_CaL: dimensionless {init: 0.5607106503080197};
    var k_RP_AP: per_millisecond;
    var k_AP_RP: per_millisecond;
    var k_RI_AI: per_millisecond;
    var k_AI_RI: per_millisecond;
    var k_AP_AI: per_millisecond {init: 0.004};
    var k_AI_AP: per_millisecond {init: 0.001};
    var k_RP_RI: per_millisecond;
    var k_RI_RP: per_millisecond;
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    ode(p_RP_CaL, time) = p_AP_CaL*k_AP_RP+p_RI_CaL*k_RI_RP-p_RP_CaL*(k_RP_RI+k_RP_AP);
    ode(p_AP_CaL, time) = p_RP_CaL*k_RP_AP+p_AI_CaL*k_AI_AP-p_AP_CaL*(k_AP_RP+k_AP_AI);
    ode(p_AI_CaL, time) = p_RI_CaL*k_RI_AI+p_AP_CaL*k_AP_AI-p_AI_CaL*(k_AI_RI+k_AI_AP);
    p_RI_CaL = 1{dimensionless}-p_AP_CaL-p_RP_CaL-p_AI_CaL;
    k_RP_AP = 1{per_millisecond}/(0.27{dimensionless}*exp(-Vm/5.9{millivolt})+1.5{dimensionless}*exp(-Vm/65{millivolt}));
    k_AP_RP = 1{per_millisecond}/(480{dimensionless}*exp(Vm/7{millivolt})+2.2{dimensionless}*exp(Vm/65{millivolt}));
    k_RI_AI = 1{per_millisecond}/(0.0018{dimensionless}*exp(-Vm/7.4{millivolt})+2{dimensionless}*exp(-Vm/100{millivolt}));
    k_AI_RI = 1{per_millisecond}/(2200000{dimensionless}*exp(Vm/7.4{millivolt})+11{dimensionless}*exp(Vm/100{millivolt}));
    k_RP_RI = 0.04{per_millisecond}/(1{dimensionless}+k_AI_AP*k_AP_RP*k_RI_AI/(k_AP_AI*k_RP_AP*k_AI_RI));
    k_RI_RP = 0.04{per_millisecond}-k_RP_RI;
  enddef;

  def comp L_type_Ca_channel_Ca_dependent_gate as
    var p_U: dimensionless {init: 0.018412749759150325, pub: out};
    var p_UCa: dimensionless {init: 2.0870506374005444e-4, pub: out};
    var iCaL: picoA;
    var Cacm: millimolar;
    var p_CCa: dimensionless;
    var p_C: dimensionless {init: 0.05040310692927668};
    var k_CCa_UCa: per_millisecond {init: 0.0003};
    var k_UCa_CCa: per_millisecond {init: 0.35};
    var k_C_U: per_millisecond {init: 0.143};
    var k_U_C: per_millisecond {init: 0.35};
    var k_UCa_U: per_millisecond;
    var k_U_UCa: per_millimolar_millisecond {init: 6.954};
    var k_CCa_C: per_millisecond {init: 0.0042};
    var k_C_CCa: per_millimolar_millisecond {init: 6.954};
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var CF_Ca: millimolar {pub: in};
    var p_AP_CaL: dimensionless {pub: in};
    var CaEffC: millimolar;
    var CaEffU: millimolar;
    var k_UUCa_Ca: per_millisecond;
    var k_CCCa_Ca: per_millisecond;
    var CaDiadic: picoA {pub: out};
    var p_open_CaL: dimensionless {pub: in};
    iCaL = 0.0676{picoA_per_millimolar}*CF_Ca;
    CaDiadic = iCaL*p_open_CaL;
    Cacm = Cai-0.3{millimolar_per_picoA}*iCaL;
    CaEffC = Cacm*p_AP_CaL;
    CaEffU = CaEffC+Cai*(1{dimensionless}-p_AP_CaL);
    k_UUCa_Ca = k_U_UCa*CaEffU;
    k_CCCa_Ca = k_C_CCa*CaEffC;
    ode(p_U, time) = p_C*k_C_U+p_UCa*k_UCa_U-p_U*(k_UUCa_Ca+k_U_C);
    ode(p_UCa, time) = p_U*k_UUCa_Ca+p_CCa*k_CCa_UCa-p_UCa*(k_UCa_CCa+k_UCa_U);
    ode(p_C, time) = p_CCa*k_CCa_C+p_U*k_U_C-p_C*(k_C_U+k_C_CCa*Cacm*p_AP_CaL);
    p_CCa = 1{dimensionless}-p_C-p_U-p_UCa;
    k_UCa_U = k_CCa_C*k_C_U*k_U_UCa*k_UCa_CCa/(k_U_C*k_C_CCa*k_CCa_UCa);
  enddef;

  def comp L_type_Ca_channel_ultra_slow_gate as
    var y: dimensionless {init: 0.8256168329801671, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y = 1{per_millisecond}/(250000{dimensionless}*exp(Vm/9{millivolt})+58{dimensionless}*exp(Vm/65{millivolt}));
    beta_y = 1{per_millisecond}/(1800{dimensionless}*exp(-Vm/14{millivolt})+66{dimensionless}*exp(-Vm/65{millivolt}));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp T_type_Ca_channel as
    var i_Ca_T: picoA {pub: out};
    var P_CaT: picoA_per_millimolar {init: 612};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var CF_Ca: millimolar {pub: in};
    var y1: dimensionless {priv: in};
    var y2: dimensionless {priv: in};
    i_Ca_T = P_CaT*CF_Ca*y1*y2;
  enddef;

  def comp T_type_Ca_channel_y1_gate as
    var y1: dimensionless {init: 0.04679297803939428, pub: out};
    var alpha_y1: per_millisecond;
    var beta_y1: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y1 = 1{per_millisecond}/(0.019{dimensionless}*exp(-Vm/5.6{millivolt})+0.82{dimensionless}*exp(-Vm/250{millivolt}));
    beta_y1 = 1{per_millisecond}/(40{dimensionless}*exp(Vm/6.3{millivolt})+1.5{dimensionless}*exp(Vm/10000{millivolt}));
    ode(y1, time) = alpha_y1*(1{dimensionless}-y1)-beta_y1*y1;
  enddef;

  def comp T_type_Ca_channel_y2_gate as
    var y2: dimensionless {init: 0.004220636800632867, pub: out};
    var alpha_y2: per_millisecond;
    var beta_y2: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y2 = 1{per_millisecond}/(62000{dimensionless}*exp(Vm/10.1{millivolt})+30{dimensionless}*exp(Vm/3000{millivolt}));
    beta_y2 = 1{per_millisecond}/(0.0006{dimensionless}*exp(-Vm/6.7{millivolt})+1.2{dimensionless}*exp(-Vm/25{millivolt}));
    ode(y2, time) = alpha_y2*(1{dimensionless}-y2)-beta_y2*y2;
  enddef;

  def comp st_channel as
    var i_st: picoA {pub: out};
    var i_st_Na: picoA {pub: out};
    var i_st_K: picoA {pub: out};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var CF_Na: millimolar {pub: in};
    var CF_K: millimolar {pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var y1: dimensionless {priv: in};
    var y2: dimensionless {priv: in};
    var y3: dimensionless {priv: in};
    var P_st_Na: picoA_per_millimolar {init: 0.236};
    var P_st_K: picoA_per_millimolar {init: 0.138};
    i_st = i_st_Na+i_st_K;
    i_st_Na = P_st_Na*CF_Na*y1*y2*y3;
    i_st_K = P_st_K*CF_K*y1*y2*y3;
  enddef;

  def comp st_channel_y1_gate as
    var y1: dimensionless {init: 0.5375825176280309, pub: out};
    var alpha_y1: per_millisecond;
    var beta_y1: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y1 = 1{per_millisecond}/(0.15{dimensionless}*exp(-Vm/11{millivolt})+0.2{dimensionless}*exp(-Vm/700{millivolt}));
    beta_y1 = 1{per_millisecond}/(16{dimensionless}*exp(Vm/8{millivolt})+15{dimensionless}*exp(Vm/50{millivolt}));
    ode(y1, time) = alpha_y1*(1{dimensionless}-y1)-beta_y1*y1;
  enddef;

  def comp st_channel_y2_gate as
    var y2: dimensionless {init: 0.3404904569858008, pub: out};
    var alpha_y2: per_millisecond;
    var beta_y2: per_millisecond;
    var Vm: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var time: millisecond {pub: in};
    alpha_y2 = 1{per_millisecond}/(3100{dimensionless}*exp(Vm/13{millivolt})+700{dimensionless}*exp(Vm/70{millivolt}));
    beta_y2 = 1{per_millisecond}/(95{dimensionless}*exp(-Vm/10{millivolt})+50{dimensionless}*exp(-Vm/700{millivolt}))+Cai*2.5{per_millimolar_millisecond}/(1{dimensionless}+exp(-Vm/5{millivolt}));
    ode(y2, time) = alpha_y2*(1{dimensionless}-y2)-beta_y2*y2;
  enddef;

  def comp st_channel_y3_gate as
    var y3: dimensionless {init: 0.5596860236041188, pub: out};
    var alpha_y3: per_millisecond;
    var beta_y3: per_millisecond;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y3 = 1{per_millisecond}/(400000{dimensionless}*exp(Vm/9{millivolt})+60{dimensionless}*exp(Vm/65{millivolt}));
    beta_y3 = 1{per_millisecond}/(700{dimensionless}*exp(-Vm/14{millivolt})+60{dimensionless}*exp(-Vm/65{millivolt}));
    ode(y3, time) = alpha_y3*(1{dimensionless}-y3)-beta_y3*y3;
  enddef;

  def comp ha_channel as
    var i_ha: picoA {pub: out};
    var i_ha_Na: picoA {pub: out};
    var i_ha_K: picoA {pub: out};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var CF_Na: millimolar {pub: in};
    var CF_K: millimolar {pub: in};
    var C1: dimensionless {priv: in};
    var C2: dimensionless {priv: in};
    var P_ha_Na: picoA_per_millimolar {init: 1.821};
    var P_ha_K: picoA_per_millimolar {init: 7.7286};
    i_ha = i_ha_Na+i_ha_K;
    i_ha_Na = P_ha_Na*CF_Na*(1{dimensionless}-C1-C2);
    i_ha_K = P_ha_K*CF_K*(1{dimensionless}-C1-C2);
  enddef;

  def comp ha_channel_voltage_dependent_gate as
    var O1: dimensionless {init: 7.531035735927369e-7};
    var O2: dimensionless {init: 1.1957124194086763e-8};
    var O3: dimensionless;
    var C1: dimensionless {init: 0.9999616586460943, pub: out};
    var C2: dimensionless {init: 3.757612529902994e-5, pub: out};
    var alpha: per_millisecond;
    var beta: per_millisecond;
    var mu: per_millisecond;
    var lambda: per_millisecond;
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    ode(O1, time) = alpha*C2+beta*O2-(alpha+beta)*O1;
    ode(O2, time) = alpha*O1+beta*O3-(alpha+beta)*O2;
    ode(C1, time) = lambda*C2-mu*C1;
    ode(C2, time) = mu*C1+beta*O1-(alpha+lambda)*C2;
    O3 = 1{dimensionless}-C1-C2-O1-O2;
    alpha = 1{per_millisecond}/(3500{dimensionless}*exp(Vm/16.8{millivolt})+0.3{dimensionless}*exp(Vm/400{millivolt}));
    beta = 1{per_millisecond}/(4{dimensionless}*exp(-Vm/14{millivolt})+2{dimensionless}*exp(-Vm/400{millivolt}));
    mu = 1{per_millisecond}/(45000000{dimensionless}*exp(Vm/8{millivolt})+500{dimensionless}*exp(Vm/200{millivolt}));
    lambda = 1{per_millisecond}/(10.5{dimensionless}*exp(-Vm/16.4{millivolt})+0.4{dimensionless}*exp(-Vm/400{millivolt}));
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: picoA {pub: out};
    var E_K: millivolt {priv: out, pub: out};
    var g_K1: nanoS;
    var P_K1_0: nanoS_per_picoF {init: 0.003125};
    var fO: dimensionless {priv: out};
    var fO2: dimensionless;
    var fO3: dimensionless;
    var fO4: dimensionless;
    var fB: dimensionless;
    var mu: per_millisecond;
    var lambda: per_millisecond;
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var Cm: picoF {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: coulomb_millivolt_per_kelvin_millimole {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var y: dimensionless {priv: in};
    i_K1 = g_K1*(Vm-E_K)*(fO4+fO3+fO2)*y;
    E_K = R*T/F*ln(Ko/Ki);
    g_K1 = P_K1_0*Cm*pow(Ko/5.4{millimolar}, 0.4{dimensionless});
    fB = mu/(mu+lambda);
    fO = lambda/(mu+lambda);
    fO2 = 2{dimensionless}*sqr(fO)*sqr(fB);
    fO3 = 8{dimensionless}/3{dimensionless}*pow(fO, 3{dimensionless})*fB;
    fO4 = pow(fO, 4{dimensionless});
    mu = 0.75{per_millisecond}*exp(0.035{per_millivolt}*(Vm-E_K-10{millivolt}))/(1{dimensionless}+exp(0.015{per_millivolt}*(Vm-E_K-140{millivolt})));
    lambda = 3{per_millisecond}*exp(-0.048{per_millivolt}*(Vm-E_K-10{millivolt}))*(1{dimensionless}+exp(0.064{per_millivolt}*(Vm-E_K-38{millivolt})))/(1{dimensionless}+exp(0.03{per_millivolt}*(Vm-E_K-70{millivolt})));
  enddef;

  def comp time_independent_potassium_current_y_gate as
    var y: dimensionless {init: 0.54434573606543, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var fO: dimensionless {pub: in};
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y = 1{per_millisecond}/(8000{dimensionless}*exp((Vm-E_K-97{millivolt})/8.5{millivolt})+7{dimensionless}*exp((Vm-E_K-97{millivolt})/300{millivolt}));
    beta_y = pow(fO, 4{dimensionless})*1{per_millisecond}/(0.00014{dimensionless}*exp(-(Vm-E_K-97{millivolt})/9.1{millivolt})+0.2{dimensionless}*exp(-(Vm-E_K-97{millivolt})/500{millivolt}));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp rapid_time_dependent_potassium_current as
    var i_Kr: picoA {pub: out};
    var g_Kr: nanoS;
    var P_Kr: nanoS_per_picoF {init: 0.1045};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var Cm: picoF {pub: in};
    var E_K: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var y1: dimensionless {priv: in};
    var y2: dimensionless {priv: in};
    var y3: dimensionless {priv: in};
    i_Kr = g_Kr*(Vm-E_K)*(0.6{dimensionless}*y1+0.4{dimensionless}*y2)*y3;
    g_Kr = P_Kr*Cm*pow(Ko/5.4{millimolar}, 0.2{dimensionless});
  enddef;

  def comp rapid_time_dependent_potassium_current_y1_gate as
    var y1: dimensionless {init: 0.7520936568166604, pub: out};
    var alpha_y1: per_millisecond;
    var beta_y1: per_millisecond;
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y1 = 1{per_millisecond}/(20{dimensionless}*exp(-Vm/11.5{millivolt})+5{dimensionless}*exp(-Vm/300{millivolt}));
    beta_y1 = 1{per_millisecond}/(160{dimensionless}*exp(Vm/28{millivolt})+200{dimensionless}*exp(Vm/1000{millivolt}))+1{per_millisecond}/(2500{dimensionless}*exp(Vm/20{millivolt}));
    ode(y1, time) = alpha_y1*(1{dimensionless}-y1)-beta_y1*y1;
  enddef;

  def comp rapid_time_dependent_potassium_current_y2_gate as
    var y2: dimensionless {init: 0.6128486629679218, pub: out};
    var alpha_y2: per_millisecond;
    var beta_y2: per_millisecond;
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y2 = 1{per_millisecond}/(200{dimensionless}*exp(-Vm/13{millivolt})+20{dimensionless}*exp(-Vm/300{millivolt}));
    beta_y2 = 1{per_millisecond}/(1600{dimensionless}*exp(Vm/28{millivolt})+2000{dimensionless}*exp(Vm/1000{millivolt}))+1{per_millisecond}/(10000{dimensionless}*exp(Vm/20{millivolt}));
    ode(y2, time) = alpha_y2*(1{dimensionless}-y2)-beta_y2*y2;
  enddef;

  def comp rapid_time_dependent_potassium_current_y3_gate as
    var y3: dimensionless {init: 0.6786243213825371, pub: out};
    var alpha_y3: per_millisecond;
    var beta_y3: per_millisecond;
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_y3 = 1{per_millisecond}/(10{dimensionless}*exp(Vm/17{millivolt})+2.5{dimensionless}*exp(Vm/300{millivolt}));
    beta_y3 = 1{per_millisecond}/(0.35{dimensionless}*exp(-Vm/17{millivolt})+2{dimensionless}*exp(-Vm/150{millivolt}));
    ode(y3, time) = alpha_y3*(1{dimensionless}-y3)-beta_y3*y3;
  enddef;

  def comp ACh_dependent_potassium_current as
    var i_KACh: picoA {pub: out};
    var time: millisecond {priv: out, pub: in};
    var Vm: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var Cm: picoF {pub: in};
    var y: dimensionless {priv: in};
    var g_ACh: nanoS {init: 4.32};
    i_KACh = g_ACh*(Vm-E_K)/(1{dimensionless}+exp((Vm+20{millivolt})/20{millivolt}))*y;
  enddef;

  def comp ACh_dependent_potassium_current_y_gate as
    var y: dimensionless {init: 0.018249236601344903, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var Vm: millivolt {pub: in};
    var ACh: millimolar {init: 0};
    var Km_ACh: millimolar {init: 0.0042};
    var time: millisecond {pub: in};
    alpha_y = sel
      case ACh == 0{millimolar}:
        0.0002475{per_millisecond};
      otherwise:
        0.01232{per_millisecond}/(1{dimensionless}+Km_ACh/ACh)+0.0002475{per_millisecond};
    endsel;
    beta_y = 0.01{per_millisecond}*exp(0.0133{per_millivolt}*(Vm+40{millivolt}));
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp background_NSC_current as
    var i_bNSC: picoA {pub: out};
    var i_bNSC_Na: picoA {pub: out};
    var i_bNSC_K: picoA {pub: out};
    var P_bNSC: picoA_per_millimolar {init: 0.152};
    var time: millisecond {pub: in};
    var CF_K: millimolar {pub: in};
    var CF_Na: millimolar {pub: in};
    i_bNSC = i_bNSC_K+i_bNSC_Na;
    i_bNSC_K = 0.4{dimensionless}*P_bNSC*CF_K;
    i_bNSC_Na = P_bNSC*CF_Na;
  enddef;

  def comp background_Kpl_current as
    var i_Kpl: picoA {pub: out};
    var P_Kpl: nanoS_per_millimolar;
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    var CF_K: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    i_Kpl = sel
      case Vm == -3{millivolt}:
        P_Kpl*CF_K*13.0077{millivolt};
      otherwise:
        P_Kpl*CF_K*(Vm+3{millivolt})/(1{dimensionless}-exp(-(Vm+3{millivolt})/13{millivolt}));
    endsel;
    P_Kpl = 0.007{nanoS_per_millimolar}*pow(Ko/5.4{millimolar}, 0.16{dimensionless});
  enddef;

  def comp background_lCa_current as
    var i_lCa: picoA {pub: out};
    var i_lCa_Na: picoA {pub: out};
    var i_lCa_K: picoA {pub: out};
    var P_lCa: picoA_per_millimolar {init: 0.44};
    var p_open: dimensionless;
    var time: millisecond {pub: in};
    var CF_K: millimolar {pub: in};
    var CF_Na: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    i_lCa = i_lCa_K+i_lCa_Na;
    i_lCa_K = P_lCa*CF_K*p_open;
    i_lCa_Na = P_lCa*CF_Na*p_open;
    p_open = 1{dimensionless}/(1{dimensionless}+pow(0.0012{millimolar}/Cai, 3{dimensionless}));
  enddef;

  def comp background_KATP_current as
    var i_KATP: picoA {pub: out};
    var p_open: dimensionless;
    var gamma: nanoS;
    var time: millisecond {pub: in};
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var ATPi: millimolar {pub: in};
    var P_KATP: nanoS_per_picoF {init: 0.0236};
    var N: picoF {init: 1000};
    i_KATP = gamma*(Vm-E_K)*p_open;
    gamma = P_KATP*N*pow(Ko/1{millimolar}, 0.24{dimensionless});
    p_open = 0.8{dimensionless}/(1{dimensionless}+sqr(ATPi/0.1{millimolar}));
  enddef;

  def comp background_Cab_current as
    var i_Cab: picoA {pub: out};
    var P_Cab: picoA_per_millimolar {init: 0.008};
    var time: millisecond {pub: in};
    var CF_Ca: millimolar {pub: in};
    i_Cab = P_Cab*CF_Ca;
  enddef;

  def comp sodium_calcium_exchanger as
    var i_NaCa: picoA {pub: out};
    var p_E2Na: dimensionless {priv: out};
    var p_E1Na: dimensionless {priv: out};
    var p_E1Ca: dimensionless {priv: out};
    var p_E2Ca: dimensionless {priv: out};
    var k1: per_millisecond {priv: out};
    var k2: per_millisecond {priv: out};
    var k3: per_millisecond {init: 1, priv: out};
    var k4: per_millisecond {init: 1, priv: out};
    var Km_Nai: millimolar {init: 8.75};
    var Km_Nao: millimolar {init: 87.5};
    var Km_Cai: millimolar {init: 0.00138};
    var Km_Cao: millimolar {init: 1.38};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var R: coulomb_millivolt_per_kelvin_millimole {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var Vm: millivolt {pub: in};
    var Cm: picoF {pub: in};
    var time: millisecond {priv: out, pub: in};
    var y: dimensionless {priv: in};
    var P_NaCa: picoA_per_picoF {init: 6.81};
    var Partition: dimensionless {init: 0.32};
    i_NaCa = P_NaCa*Cm*1{millisecond}*(k1*p_E1Na*y-k2*p_E2Na*(1{dimensionless}-y));
    p_E1Na = 1{dimensionless}/(1{dimensionless}+pow(Km_Nai/Nai, 3{dimensionless})*(1{dimensionless}+Cai/Km_Cai));
    p_E2Na = 1{dimensionless}/(1{dimensionless}+pow(Km_Nao/Nao, 3{dimensionless})*(1{dimensionless}+Cao/Km_Cao));
    p_E1Ca = 1{dimensionless}/(1{dimensionless}+Km_Cai/Cai*(1{dimensionless}+pow(Nai/Km_Nai, 3{dimensionless})));
    p_E2Ca = 1{dimensionless}/(1{dimensionless}+Km_Cao/Cao*(1{dimensionless}+pow(Nao/Km_Nao, 3{dimensionless})));
    k1 = 1{per_millisecond}*exp(Partition*F*Vm/(R*T));
    k2 = 1{per_millisecond}*exp((Partition-1{dimensionless})*F*Vm/(R*T));
  enddef;

  def comp sodium_calcium_exchanger_y_gate as
    var y: dimensionless {init: 0.9218642754061908, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var time: millisecond {pub: in};
    var p_E1Na: dimensionless {pub: in};
    var p_E2Na: dimensionless {pub: in};
    var p_E1Ca: dimensionless {pub: in};
    var p_E2Ca: dimensionless {pub: in};
    var k1: per_millisecond {pub: in};
    var k2: per_millisecond {pub: in};
    var k3: per_millisecond {pub: in};
    var k4: per_millisecond {pub: in};
    alpha_y = k2*p_E2Na+k4*p_E2Ca;
    beta_y = k1*p_E1Na+k3*p_E1Ca;
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var p_E2Na: dimensionless {priv: out};
    var p_E1Na: dimensionless {priv: out};
    var p_E1K: dimensionless {priv: out};
    var p_E2K: dimensionless {priv: out};
    var k1: per_millisecond {priv: out};
    var k2: per_millisecond {init: 0.04, priv: out};
    var k3: per_millisecond {init: 0.01, priv: out};
    var k4: per_millisecond {init: 0.165, priv: out};
    var Km_Nai: millimolar {init: 4.05};
    var Km_Nao: millimolar {init: 69.8};
    var Km_Ki: millimolar {init: 32.88};
    var Km_Ko: millimolar {init: 0.258};
    var Km_ATP: millimolar {init: 0.094};
    var Nao_Eff: millimolar;
    var ATPi: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var R: coulomb_millivolt_per_kelvin_millimole {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var Vm: millivolt {pub: in};
    var Cm: picoF {pub: in};
    var time: millisecond {priv: out, pub: in};
    var y: dimensionless {priv: in};
    var P_NaK: picoA_per_picoF {init: 21};
    i_NaK = P_NaK*Cm*1{millisecond}*(k1*p_E1Na*y-k2*p_E2Na*(1{dimensionless}-y));
    p_E1Na = 1{dimensionless}/(1{dimensionless}+pow(Km_Nai/Nai, 1.06{dimensionless})*(1{dimensionless}+pow(Ki/Km_Ki, 1.12{dimensionless})));
    p_E2Na = 1{dimensionless}/(1{dimensionless}+pow(Km_Nao/Nao_Eff, 1.06{dimensionless})*(1{dimensionless}+pow(Ko/Km_Ko, 1.12{dimensionless})));
    p_E1K = 1{dimensionless}/(1{dimensionless}+pow(Km_Ki/Ki, 1.12{dimensionless})*(1{dimensionless}+pow(Nai/Km_Nai, 1.06{dimensionless})));
    p_E2K = 1{dimensionless}/(1{dimensionless}+pow(Km_Ko/Ko, 1.12{dimensionless})*(1{dimensionless}+pow(Nao_Eff/Km_Nao, 1.06{dimensionless})));
    k1 = 0.37{per_millisecond}/(1{dimensionless}+Km_ATP/ATPi);
    Nao_Eff = Nao*exp(-0.82{dimensionless}*F*Vm/(R*T));
  enddef;

  def comp sodium_potassium_pump_y_gate as
    var y: dimensionless {init: 0.6755031143352256, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var time: millisecond {pub: in};
    var p_E1Na: dimensionless {pub: in};
    var p_E2Na: dimensionless {pub: in};
    var p_E1K: dimensionless {pub: in};
    var p_E2K: dimensionless {pub: in};
    var k1: per_millisecond {pub: in};
    var k2: per_millisecond {pub: in};
    var k3: per_millisecond {pub: in};
    var k4: per_millisecond {pub: in};
    alpha_y = k2*p_E2Na+k4*p_E2K;
    beta_y = k1*p_E1Na+k3*p_E1K;
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp SR_calcium_pump as
    var i_SR_U: picoA {pub: out};
    var p_E2Ca: dimensionless {priv: out};
    var p_E1Ca: dimensionless {priv: out};
    var p_E1: dimensionless {priv: out};
    var p_E2: dimensionless {priv: out};
    var k1: per_millisecond {init: 0.01, priv: out};
    var k2: per_millisecond {priv: out};
    var k3: per_millisecond {init: 1, priv: out};
    var k4: per_millisecond {init: 0.01, priv: out};
    var Km_CaSR: millimolar {init: 0.08};
    var Km_CaCyto: millimolar {init: 0.0008};
    var Km_ATP: millimolar {init: 0.1};
    var i_max: picoA {init: 4875};
    var ATPi: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Caup: millimolar {pub: in};
    var time: millisecond {priv: out, pub: in};
    var y: dimensionless {priv: in};
    i_SR_U = i_max*1{millisecond}*(k1*p_E1Ca*y-k2*p_E2Ca*(1{dimensionless}-y));
    p_E1Ca = 1{dimensionless}/(1{dimensionless}+Km_CaSR/Caup);
    p_E2Ca = 1{dimensionless}/(1{dimensionless}+Km_CaCyto/Cai);
    p_E1 = 1{dimensionless}-p_E1Ca;
    p_E2 = 1{dimensionless}-p_E2Ca;
    k2 = 1{per_millisecond}/(1{dimensionless}+Km_ATP/ATPi);
  enddef;

  def comp SR_calcium_pump_y_gate as
    var y: dimensionless {init: 0.8709732600283433, pub: out};
    var alpha_y: per_millisecond;
    var beta_y: per_millisecond;
    var time: millisecond {pub: in};
    var p_E1Ca: dimensionless {pub: in};
    var p_E2Ca: dimensionless {pub: in};
    var p_E1: dimensionless {pub: in};
    var p_E2: dimensionless {pub: in};
    var k1: per_millisecond {pub: in};
    var k2: per_millisecond {pub: in};
    var k3: per_millisecond {pub: in};
    var k4: per_millisecond {pub: in};
    alpha_y = k2*p_E2Ca+k4*p_E2;
    beta_y = k1*p_E1Ca+k3*p_E1;
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  def comp RyR_channel as
    var i_RyR: picoA {pub: out};
    var P_RyR: picoA_per_millimolar {init: 1860};
    var k1: per_millisecond;
    var k2: per_millisecond;
    var k3: per_millisecond;
    var k4: per_millisecond {init: 0.000849};
    var p_open_RyR: dimensionless {init: 0.011424172905335395};
    var p_close_RyR: dimensionless {init: 0.007354039651246729};
    var p_open_CaL: dimensionless {pub: in};
    var Cai: millimolar {pub: in};
    var Carel: millimolar {pub: in};
    var time: millisecond {pub: in};
    var Diadid_Factor: per_picoA_millisecond {init: -3};
    var CaDiadic: picoA {pub: in};
    i_RyR = P_RyR*(Carel-Cai)*p_open_RyR;
    ode(p_open_RyR, time) = p_close_RyR*k1-p_open_RyR*k2;
    ode(p_close_RyR, time) = k3*(1{dimensionless}-(p_open_RyR+p_close_RyR))-(k1+k4)*p_close_RyR;
    k1 = 280000{per_millisecond}*sqr(Cai/1{millimolar})+Diadid_Factor*CaDiadic;
    k2 = 0.08{per_millisecond}/(1{dimensionless}+0.36{millimolar}/Carel);
    k3 = 0.000377{per_millisecond}*sqr(Carel/1{millimolar});
  enddef;

  def comp SR_T_current as
    var i_SR_T: picoA {pub: out};
    var P_SR_T: picoA_per_millimolar {init: 11.58};
    var Carel: millimolar {pub: in};
    var Caup: millimolar {pub: in};
    var time: millisecond {pub: in};
    i_SR_T = P_SR_T*(Caup-Carel);
  enddef;

  def comp SR_L_current as
    var i_SR_L: picoA {pub: out};
    var P_SR_L: picoA_per_millimolar {init: 13.77};
    var Cai: millimolar {pub: in};
    var Caup: millimolar {pub: in};
    var time: millisecond {pub: in};
    i_SR_L = P_SR_L*(Caup-Cai);
  enddef;

  def comp Ca_concentrations_in_SR as
    var Ca_Total: millimolar {init: 5.185011336959393};
    var Carel: millimolar {pub: out};
    var Caup: millimolar {init: 3.539652240305415, pub: out};
    var V_rel: micrometre3 {init: 1.50795};
    var V_up: micrometre3 {init: 3.769875};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_SR_L: picoA {pub: in};
    var i_SR_T: picoA {pub: in};
    var i_RyR: picoA {pub: in};
    var i_SR_U: picoA {pub: in};
    var CSQN_max: millimolar {init: 10};
    var K_mCSQN: millimolar {init: 0.8};
    var b1: millimolar;
    var c1: millimolar2;
    b1 = CSQN_max-Ca_Total+K_mCSQN;
    c1 = K_mCSQN*Ca_Total;
    Carel = (sqrt(sqr(b1)+4{dimensionless}*c1)-b1)/2{dimensionless};
    ode(Ca_Total, time) = (i_SR_T-i_RyR)/(2{dimensionless}*F*V_rel);
    ode(Caup, time) = (-i_SR_U-i_SR_T-i_SR_L)/(2{dimensionless}*F*V_up);
  enddef;

  def comp NL_model as
    var dCaidt: millimolar_per_millisecond {pub: out};
    var dATPdt: millimolar_per_millisecond {pub: out};
    var EffFraction: dimensionless;
    var pCa: dimensionless {init: 0.24298053499618683};
    var pCaCB: dimensionless {init: 0.02896443650702234};
    var pCB: dimensionless {init: 0.0020275353474589783};
    var p: dimensionless;
    var T_t: millimolar {init: 0.007};
    var Q_a: per_millisecond;
    var Q_b: per_millisecond;
    var Q_r: per_millisecond;
    var Q_d: per_millisecond;
    var Q_d1: per_millisecond;
    var Q_d2: per_millisecond;
    var Y_1: per_millimolar_millisecond {init: 39};
    var Y_2: per_millisecond {init: 0.0039};
    var Y_3: per_millisecond {init: 0.03};
    var Y_4: per_millisecond {init: 0.12};
    var Y_d: millisecond_per_micrometre2 {init: 0.027};
    var Z_1: per_millisecond {init: 0.03};
    var Z_2: per_millisecond {init: 0.0039};
    var Z_3: per_millimolar_millisecond {init: 1560};
    var h: micrometre;
    var L_a: micrometre {init: 1.17};
    var L: micrometre {init: 0.9602399999150041};
    var ForceCB: mN_per_mm2;
    var X: micrometre {init: 0.9552449999150041};
    var time: millisecond {pub: in};
    var Cai: millimolar {pub: in};
    var NewCBF: mN_per_mm2_micrometre;
    var CBBound: millimolar;
    var KForceEC: mN_per_mm2_micrometre5 {init: 140000};
    var ZeroForceEL: micrometre {init: 0.97};
    var KForceLinearEc: mN_per_mm2_micrometre {init: 200};
    var ForceFactor: mN_per_mm2_micrometre_millimolar {init: 1800000};
    var ForceEcomp: mN_per_mm2;
    var B: per_millisecond {init: 1.2};
    var h_c: micrometre {init: 0.005};
    var ForceExt: mN_per_mm2;
    h = L-X;
    p = 1{dimensionless}-pCa-pCaCB-pCB;
    Q_b = Y_1*Cai*p-Z_1*pCa;
    EffFraction = exp(-20{per_micrometre2}*sqr(L-L_a));
    Q_a = Y_2*pCa*EffFraction-Z_2*pCaCB;
    Q_r = Y_3*pCaCB-Z_3*pCB*Cai;
    Q_d = Y_4*pCB;
    Q_d1 = Y_d*sqr(ode(X, time))*pCB;
    Q_d2 = Y_d*sqr(ode(X, time))*pCaCB;
    ode(pCa, time) = Q_b-Q_a;
    ode(pCaCB, time) = Q_a-Q_r-Q_d2;
    ode(pCB, time) = Q_r-Q_d-Q_d1;
    dCaidt = T_t*(Q_d2+Q_r-Q_b);
    dATPdt = -0.4{per_millisecond}*pCaCB*T_t;
    CBBound = T_t*(pCaCB+pCB);
    NewCBF = ForceFactor*CBBound;
    ForceEcomp = KForceEC*pow(ZeroForceEL-L, 5{dimensionless})+KForceLinearEc*(ZeroForceEL-L);
    ForceCB = NewCBF*h;
    ForceExt = -ForceEcomp+ForceCB;
    ode(X, time) = B*(h-h_c);
  enddef;

  def comp internal_concentrations as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp transmembrane_currents as
  enddef;

  def group as containment for
    comp membrane incl
      comp internal_concentrations incl
        comp internal_ion_concentrations;
        comp Ca_concentrations_in_SR;
        comp constant_field_equations;
        comp ATP_production;
        comp NL_model;
      endcomp;
      comp transmembrane_currents incl
        comp sodium_current incl
          comp sodium_current_voltage_dependent_gate;
          comp sodium_current_ultra_slow_gate;
        endcomp;
        comp L_type_Ca_channel incl
          comp L_type_Ca_channel_voltage_dependent_gate;
          comp L_type_Ca_channel_Ca_dependent_gate;
          comp L_type_Ca_channel_ultra_slow_gate;
        endcomp;
        comp T_type_Ca_channel incl
          comp T_type_Ca_channel_y1_gate;
          comp T_type_Ca_channel_y2_gate;
        endcomp;
        comp st_channel incl
          comp st_channel_y1_gate;
          comp st_channel_y2_gate;
          comp st_channel_y3_gate;
        endcomp;
        comp ha_channel incl
          comp ha_channel_voltage_dependent_gate;
        endcomp;
        comp time_independent_potassium_current incl
          comp time_independent_potassium_current_y_gate;
        endcomp;
        comp rapid_time_dependent_potassium_current incl
          comp rapid_time_dependent_potassium_current_y1_gate;
          comp rapid_time_dependent_potassium_current_y2_gate;
          comp rapid_time_dependent_potassium_current_y3_gate;
        endcomp;
        comp ACh_dependent_potassium_current incl
          comp ACh_dependent_potassium_current_y_gate;
        endcomp;
        comp background_NSC_current;
        comp background_Kpl_current;
        comp background_lCa_current;
        comp background_Cab_current;
        comp background_KATP_current;
        comp sodium_calcium_exchanger incl
          comp sodium_calcium_exchanger_y_gate;
        endcomp;
        comp sodium_potassium_pump incl
          comp sodium_potassium_pump_y_gate;
        endcomp;
      endcomp;
      comp intracellular_currents incl
        comp SR_calcium_pump incl
          comp SR_calcium_pump_y_gate;
        endcomp;
        comp RyR_channel;
        comp SR_T_current;
        comp SR_L_current;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_voltage_dependent_gate;
      comp sodium_current_ultra_slow_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_voltage_dependent_gate;
      comp L_type_Ca_channel_Ca_dependent_gate;
      comp L_type_Ca_channel_ultra_slow_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_y1_gate;
      comp T_type_Ca_channel_y2_gate;
    endcomp;
    comp st_channel incl
      comp st_channel_y1_gate;
      comp st_channel_y2_gate;
      comp st_channel_y3_gate;
    endcomp;
    comp ha_channel incl
      comp ha_channel_voltage_dependent_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_y_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_y1_gate;
      comp rapid_time_dependent_potassium_current_y2_gate;
      comp rapid_time_dependent_potassium_current_y3_gate;
    endcomp;
    comp ACh_dependent_potassium_current incl
      comp ACh_dependent_potassium_current_y_gate;
    endcomp;
    comp sodium_calcium_exchanger incl
      comp sodium_calcium_exchanger_y_gate;
    endcomp;
    comp sodium_potassium_pump incl
      comp sodium_potassium_pump_y_gate;
    endcomp;
    comp SR_calcium_pump incl
      comp SR_calcium_pump_y_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between internal_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between ATP_production and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between st_channel and environment for
    vars time and time;
  enddef;
  def map between ha_channel and environment for
    vars time and time;
  enddef;
  def map between SR_T_current and environment for
    vars time and time;
  enddef;
  def map between SR_L_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between ACh_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between background_NSC_current and environment for
    vars time and time;
  enddef;
  def map between background_Kpl_current and environment for
    vars time and time;
  enddef;
  def map between background_lCa_current and environment for
    vars time and time;
  enddef;
  def map between background_KATP_current and environment for
    vars time and time;
  enddef;
  def map between background_Cab_current and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between SR_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between RyR_channel and environment for
    vars time and time;
  enddef;
  def map between Ca_concentrations_in_SR and environment for
    vars time and time;
  enddef;
  def map between NL_model and environment for
    vars time and time;
  enddef;
  def map between membrane and internal_ion_concentrations for
    vars F and F;
  enddef;
  def map between membrane and constant_field_equations for
    vars Vm and Vm;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ATP_production for
    vars Vm and Vm;
    vars F and F;
  enddef;
  def map between membrane and sodium_current for
    vars Vm and Vm;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars Vm and Vm;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars Vm and Vm;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between membrane and st_channel for
    vars Vm and Vm;
    vars i_st and i_st;
  enddef;
  def map between membrane and ha_channel for
    vars Vm and Vm;
    vars i_ha and i_ha;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars Vm and Vm;
    vars Cm and Cm;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars Vm and Vm;
    vars Cm and Cm;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and ACh_dependent_potassium_current for
    vars Vm and Vm;
    vars Cm and Cm;
    vars i_KACh and i_KACh;
  enddef;
  def map between membrane and background_NSC_current for
    vars i_bNSC and i_bNSC;
  enddef;
  def map between membrane and background_Kpl_current for
    vars i_Kpl and i_Kpl;
    vars Vm and Vm;
  enddef;
  def map between membrane and background_lCa_current for
    vars i_lCa and i_lCa;
  enddef;
  def map between membrane and background_KATP_current for
    vars i_KATP and i_KATP;
    vars Vm and Vm;
  enddef;
  def map between membrane and background_Cab_current for
    vars i_Cab and i_Cab;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars Vm and Vm;
    vars Cm and Cm;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars Vm and Vm;
    vars Cm and Cm;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and Ca_concentrations_in_SR for
    vars F and F;
  enddef;
  def map between internal_ion_concentrations and constant_field_equations for
    vars Nai and Nai;
    vars Ki and Ki;
    vars Cai and Cai;
  enddef;
  def map between internal_ion_concentrations and NL_model for
    vars Cai and Cai;
    vars dCaidt_NL and dCaidt;
  enddef;
  def map between external_ion_concentrations and constant_field_equations for
    vars Nao and Nao;
    vars Ko and Ko;
    vars Cao and Cao;
  enddef;
  def map between external_ion_concentrations and time_independent_potassium_current for
    vars Ko and Ko;
  enddef;
  def map between external_ion_concentrations and rapid_time_dependent_potassium_current for
    vars Ko and Ko;
  enddef;
  def map between external_ion_concentrations and background_Kpl_current for
    vars Ko and Ko;
  enddef;
  def map between external_ion_concentrations and background_KATP_current for
    vars Ko and Ko;
  enddef;
  def map between internal_ion_concentrations and background_lCa_current for
    vars Cai and Cai;
    vars i_lCa_Na and i_lCa_Na;
    vars i_lCa_K and i_lCa_K;
  enddef;
  def map between internal_ion_concentrations and sodium_calcium_exchanger for
    vars Nai and Nai;
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between external_ion_concentrations and sodium_calcium_exchanger for
    vars Nao and Nao;
    vars Cao and Cao;
  enddef;
  def map between internal_ion_concentrations and sodium_potassium_pump for
    vars Nai and Nai;
    vars Ki and Ki;
    vars i_NaK and i_NaK;
  enddef;
  def map between external_ion_concentrations and sodium_potassium_pump for
    vars Nao and Nao;
    vars Ko and Ko;
  enddef;
  def map between internal_ion_concentrations and SR_calcium_pump for
    vars Cai and Cai;
    vars i_SR_U and i_SR_U;
  enddef;
  def map between internal_ion_concentrations and RyR_channel for
    vars i_RyR and i_RyR;
    vars Cai and Cai;
  enddef;
  def map between internal_ion_concentrations and SR_L_current for
    vars Cai and Cai;
    vars i_SR_L and i_SR_L;
  enddef;
  def map between internal_ion_concentrations and sodium_current for
    vars i_Na_Na and i_Na_Na;
    vars i_Na_K and i_Na_K;
  enddef;
  def map between internal_ion_concentrations and L_type_Ca_channel for
    vars i_CaL_Na and i_CaL_Na;
    vars i_CaL_Ca and i_CaL_Ca;
    vars i_CaL_K and i_CaL_K;
    vars Cai and Cai;
  enddef;
  def map between internal_ion_concentrations and T_type_Ca_channel for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between internal_ion_concentrations and st_channel for
    vars i_st_Na and i_st_Na;
    vars i_st_K and i_st_K;
    vars Cai and Cai;
  enddef;
  def map between internal_ion_concentrations and ha_channel for
    vars i_ha_Na and i_ha_Na;
    vars i_ha_K and i_ha_K;
  enddef;
  def map between internal_ion_concentrations and time_independent_potassium_current for
    vars i_K1 and i_K1;
    vars Ki and Ki;
  enddef;
  def map between internal_ion_concentrations and rapid_time_dependent_potassium_current for
    vars i_Kr and i_Kr;
  enddef;
  def map between internal_ion_concentrations and ACh_dependent_potassium_current for
    vars i_KACh and i_KACh;
  enddef;
  def map between internal_ion_concentrations and background_NSC_current for
    vars i_bNSC and i_bNSC;
    vars i_bNSC_Na and i_bNSC_Na;
    vars i_bNSC_K and i_bNSC_K;
  enddef;
  def map between internal_ion_concentrations and background_Kpl_current for
    vars i_Kpl and i_Kpl;
  enddef;
  def map between internal_ion_concentrations and background_KATP_current for
    vars i_KATP and i_KATP;
  enddef;
  def map between internal_ion_concentrations and background_Cab_current for
    vars i_Cab and i_Cab;
  enddef;
  def map between constant_field_equations and sodium_current for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and L_type_Ca_channel for
    vars CF_Ca and CF_Ca;
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and T_type_Ca_channel for
    vars CF_Ca and CF_Ca;
  enddef;
  def map between constant_field_equations and st_channel for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and ha_channel for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and background_NSC_current for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and background_Kpl_current for
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and background_lCa_current for
    vars CF_Na and CF_Na;
    vars CF_K and CF_K;
  enddef;
  def map between constant_field_equations and background_Cab_current for
    vars CF_Ca and CF_Ca;
  enddef;
  def map between ATP_production and NL_model for
    vars dATPdt_NL and dATPdt;
  enddef;
  def map between ATP_production and L_type_Ca_channel for
    vars ATPi and ATPi;
  enddef;
  def map between ATP_production and background_KATP_current for
    vars ATPi and ATPi;
  enddef;
  def map between ATP_production and sodium_potassium_pump for
    vars i_NaK and i_NaK;
    vars ATPi and ATPi;
  enddef;
  def map between ATP_production and SR_calcium_pump for
    vars ATPi and ATPi;
    vars i_SR_U and i_SR_U;
  enddef;
  def map between ATP_production and internal_ion_concentrations for
    vars Vi and Vi;
  enddef;
  def map between time_independent_potassium_current and rapid_time_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and ACh_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and background_KATP_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_concentrations_in_SR and SR_calcium_pump for
    vars Caup and Caup;
    vars i_SR_U and i_SR_U;
  enddef;
  def map between L_type_Ca_channel and RyR_channel for
    vars p_open_CaL and p_open_CaL;
    vars CaDiadic and CaDiadic;
  enddef;
  def map between Ca_concentrations_in_SR and RyR_channel for
    vars Carel and Carel;
    vars i_RyR and i_RyR;
  enddef;
  def map between Ca_concentrations_in_SR and SR_T_current for
    vars Caup and Caup;
    vars Carel and Carel;
    vars i_SR_T and i_SR_T;
  enddef;
  def map between Ca_concentrations_in_SR and SR_L_current for
    vars Caup and Caup;
    vars i_SR_L and i_SR_L;
  enddef;
  def map between sodium_current and sodium_current_voltage_dependent_gate for
    vars p_AP_Na and p_AP_Na;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between sodium_current and sodium_current_ultra_slow_gate for
    vars y and y;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_voltage_dependent_gate for
    vars p_AP_CaL and p_AP_CaL;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between L_type_Ca_channel_Ca_dependent_gate and L_type_Ca_channel_voltage_dependent_gate for
    vars p_AP_CaL and p_AP_CaL;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_Ca_dependent_gate for
    vars p_U and p_U;
    vars p_UCa and p_UCa;
    vars Cai and Cai;
    vars CF_Ca and CF_Ca;
    vars time and time;
    vars Vm and Vm;
    vars CaDiadic and CaDiadic;
    vars p_open_CaL and p_open_CaL;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_ultra_slow_gate for
    vars y and y;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_y1_gate for
    vars y1 and y1;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_y2_gate for
    vars y2 and y2;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between st_channel and st_channel_y1_gate for
    vars y1 and y1;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between st_channel and st_channel_y2_gate for
    vars y2 and y2;
    vars time and time;
    vars Vm and Vm;
    vars Cai and Cai;
  enddef;
  def map between st_channel and st_channel_y3_gate for
    vars y3 and y3;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between ha_channel and ha_channel_voltage_dependent_gate for
    vars C1 and C1;
    vars C2 and C2;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_y_gate for
    vars fO and fO;
    vars y and y;
    vars E_K and E_K;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_y1_gate for
    vars y1 and y1;
    vars E_K and E_K;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_y2_gate for
    vars y2 and y2;
    vars E_K and E_K;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_y3_gate for
    vars y3 and y3;
    vars E_K and E_K;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between ACh_dependent_potassium_current and ACh_dependent_potassium_current_y_gate for
    vars y and y;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between sodium_calcium_exchanger and sodium_calcium_exchanger_y_gate for
    vars y and y;
    vars p_E1Na and p_E1Na;
    vars p_E2Na and p_E2Na;
    vars p_E1Ca and p_E1Ca;
    vars p_E2Ca and p_E2Ca;
    vars time and time;
    vars k1 and k1;
    vars k2 and k2;
    vars k3 and k3;
    vars k4 and k4;
  enddef;
  def map between sodium_potassium_pump and sodium_potassium_pump_y_gate for
    vars y and y;
    vars p_E1Na and p_E1Na;
    vars p_E2Na and p_E2Na;
    vars p_E1K and p_E1K;
    vars p_E2K and p_E2K;
    vars time and time;
    vars k1 and k1;
    vars k2 and k2;
    vars k3 and k3;
    vars k4 and k4;
  enddef;
  def map between SR_calcium_pump and SR_calcium_pump_y_gate for
    vars y and y;
    vars p_E1 and p_E1;
    vars p_E2 and p_E2;
    vars p_E1Ca and p_E1Ca;
    vars p_E2Ca and p_E2Ca;
    vars time and time;
    vars k1 and k1;
    vars k2 and k2;
    vars k3 and k3;
    vars k4 and k4;
  enddef;
enddef;
