//   FILE :  greenstein_model_2000.xml
//
// CREATED :  5th September 2003
//
// LAST MODIFIED : 20th April 2005
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of Greenstein et al's 2000 mathematical model of the role of the transient outward current Ito1 in shaping action potential morphology and duration.
//
// CHANGES:
//   20/04/2005 - PJV - Made MathML id's unique
// publisher: The University of Auckland, Bioengineering Institute
// created: W3CDTF 2003-09-05
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Greenstein et al's 2000 mathematical model of the role of the transient outward current Ito1 in shaping action potential morphology and duration.
// bio_entity: Ventricular Myocyte
// comment: FN Catherine Lloyd; This is the CellML description of Greenstein et al's 2000 mathematical model of the role of the transient outward current Ito1 in shaping action potential morphology and duration.
// reference: Pubmed_id 11090548; Given Joseph; Family Greenstein; Other L; Given Richard; Family Wu; Given Sunny; Family Po; Given Gordon; Family Tomaselli; Other F; Given Raimond; Family Winslow; Other L; title Role of the Calcium-Independent Transient Outward Current Ito1 in Shaping Action Potential Morphology and Duration; volume 87; first_page 1026; title Circulation Research; W3CDTF 2000-11-24; last_page 1033
// reference: subject_type keyword; cardiac; ventricular myocyte; electrophysiology; Ventricular Myocyte
// species: Canine
def model greenstein_wu_po_tomaselli_winslow_2000_version01 as
  // Role of Ito1 in Shaping Action Potential Morphology and Duration
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // The Kv4.3-encoded current (IKv4.3 ) has been identified as being the major component of the voltage-dependent, calcium-independent, transient outward current Ito1 . In turn, this current has been shown to play an essential role in shaping the morphology of the early phase of the cardiac ventricular action potential. However, its influence on action potential duration remains unclear. In order to help resolve conflicting experimental results, in 2000 Greenstein et al. published Markov models of the human and canine Kv4.3- and Kv1.4-encoded currents. These were embedded within a canine midmyocardial ventricular myocyte model which was previously published by Winslow et al. (1999) (${HTML_EXMPL_W_MODEL}) (see below for a schematic of the model).
  //
  // Model simulations helped to elucidate the mechanisms by which Ito1 influences action potential shape and duration. Strong coupling between L-type Ca2+ current and IKv4.3 was observed. In addition, a bimodal relationship between IKv4.3 density and action potential duration, such that changes in IKv4.3 density may either lengthen or shorten action potential duration, depending on the baseline Ito1 level, was also predicted.
  //
  // The complete original paper reference is cited below:
  //
  // Role of the Calcium-Independent Transient Outward Current Ito1 in Shaping Action Potential Morphology and Duration, Joseph L. Greenstein, Richard Wu, Sunny Po, Gordon F. Tomaselli, and Raimond L. Winslow, 2000,Circulation Research , 87, 1026-1033. (PubMed ID: 11090548 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=11090548&dopt=Abstract)
  //
  // The raw CellML description of the model can be downloaded in various formats as described in .
  //
  // cell diagram
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the Winslow et al canine ventricular cell model. The canine Ito1 current described in the Greenstein et al. 2000 paper is embedded within this whole cell model. The Markov model structure consists of four closed states (C0-C3), four closed, inactivated states(CI0-CI3), one open state (O), and one open-inactivated state (OI). The transition rates are voltage dependent, and scaling factors are used to couple inactivation to activation.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit picoF_per_mm2 as
    unit farad {pref: pico};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar3_per_millisecond as
    unit millimolar {expo: -3};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar4_per_millisecond as
    unit millimolar {expo: -4};
    unit millisecond {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: millisecond {pub: out};
  enddef;
  // The "membrane" component is really the `root' node of our model.
  // It defines the action potential variable "V" among other things.

  def comp membrane as
    var V: millivolt {pub: out, init: -95.87};
    var R: joule_per_mole_kelvin {pub: out, init: 8.314};
    var T: kelvin {pub: out, init: 310.0};
    var F: coulomb_per_millimole {pub: out, init: 96.5};
    var C_sc: picoF_per_mm2 {pub: out, init: 10E4};
    var time: millisecond {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Ca: microA_per_microF {pub: in};
    var i_Ca_K: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_to1: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    ode(V, time) = -(i_Na+i_Ca+i_Ca_K+i_Kr+i_Ks+i_to1+i_K1+i_Kp+i_NaCa+i_NaK+i_p_Ca+i_Na_b+i_Ca_b)/C_sc;
  enddef;

  def comp fast_sodium_current as
    var i_Na: microA_per_microF {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: milliS_per_microF {init: 12.8};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.00024676};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1.0{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11.0{millivolt});
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.99869};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40.0{millivolt}:
        0.135{per_millisecond}*exp((80.0{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40.0{millivolt}:
        3.56{per_millisecond}*exp(0.079{millivolt}*V)+310000.0{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1.0{dimensionless}/(0.13{millisecond}*(1.0{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {pub: out, init: 0.99887};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40.0{millivolt}:
        (-127140.0{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)-0.00003474{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))*((V+37.78{millivolt})/(1.0{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}))));
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40.0{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-0.0000002535{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1{per_millivolt}*(V+32.0{millivolt})));
    endsel;
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current as
    var i_Kr: microA_per_microF {pub: out};
    var E_K: millivolt {pub: out};
    var g_Kr: milliS_per_microF {init: 0.0034};
    var f_Ko: dimensionless;
    var R_V: dimensionless;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var X_kr: dimensionless {priv: in};
    E_K = R*T/F*ln(Ko/Ki);
    i_Kr = g_Kr*f_Ko*R_V*X_kr*(V-E_K);
    f_Ko = sqrt(Ko/4.0{millimolar});
    R_V = 1.0{dimensionless}/(1.0{dimensionless}+1.4945{dimensionless}*exp(0.0446{dimensionless}*V));
  enddef;

  def comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate as
    var X_kr: dimensionless {pub: out, init: 0.6935};
    var K12: dimensionless;
    var K21: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(X_kr, time) = K12*(1.0{dimensionless}-X_kr)-K12*X_kr;
    K12 = exp(-5.495{dimensionless}+0.169{dimensionless}*V);
    K21 = exp(-7.677{dimensionless}-0.0128{dimensionless}*V);
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current as
    var i_Ks: microA_per_microF {pub: out};
    var g_Ks: milliS_per_microF {init: 0.00271};
    var E_Ks: millivolt;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var X_ks: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(X_ks)*(V-E_Ks);
    E_Ks = R*T/F*ln((Ko+0.01833{dimensionless}*Nao)/(Ki+0.01833{dimensionless}*Nai));
  enddef;

  def comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate as
    var X_ks: dimensionless {pub: out, init: 0.00014589};
    var tau_X_ks: dimensionless;
    var X_ks_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(X_ks, time) = (X_ks_infinity-X_ks)/tau_X_ks;
    X_ks_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-24.7{millivolt})/13.6{millivolt}));
    tau_X_ks = 1.0{dimensionless}/(0.0000719{dimensionless}*(V-10.0{millivolt})/(1.0{dimensionless}-exp(-0.148{dimensionless}*(V-10.0{millivolt})))+0.000131{dimensionless}*(V-10.0{millivolt})/(exp(0.0687{dimensionless}*(V-10.0{millivolt}))-1.0{dimensionless}));
  enddef;

  def comp transient_outward_potassium_current as
    var i_to1: microA_per_microF {pub: out};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in, priv: out};
    var Nai: millimolar {pub: in, priv: out};
    var Nao: millimolar {pub: in, priv: out};
    var Ki: millimolar {pub: in, priv: out};
    var Ko: millimolar {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in, priv: out};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_millimole {pub: in, priv: out};
    var C_sc: picoF_per_mm2 {pub: in, priv: out};
    var i_Kv4_3: microA_per_microF {priv: in};
    var i_Kv1_4: microA_per_microF {priv: in};
    i_to1 = i_Kv4_3+i_Kv1_4;
  enddef;

  def comp Kv4_3_current as
    var i_Kv4_3: microA_per_microF {pub: out};
    var g_Kv4_3: milliS_per_microF;
    var P_open: dimensionless;
    var P_C0: dimensionless;
    var P_C1: dimensionless;
    var P_C2: dimensionless;
    var P_C3: dimensionless;
    var P_CI0: dimensionless;
    var P_CI1: dimensionless;
    var P_CI2: dimensionless;
    var P_CI3: dimensionless;
    var P_O: dimensionless;
    var P_OI: dimensionless;
    var a_a: per_millivolt {init: 0.02898};
    var b_a: per_millivolt {init: 0.04684};
    var a_i: per_millivolt {init: 3.7302E-4};
    var b_i: per_millivolt {init: 5.374E-8};
    var alpha_a0: per_millisecond {init: 0.5437};
    var beta_a0: per_millisecond {init: 0.08019};
    var alpha_i0: per_millisecond {init: 0.04984};
    var beta_i0: per_millisecond {init: 8.1948E-4};
    var alpha_a: per_millisecond;
    var beta_a: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var f1: dimensionless {init: 1.8936};
    var f2: dimensionless {init: 14.225};
    var f3: dimensionless {init: 158.574};
    var f4: dimensionless {init: 142.937};
    var b1: dimensionless {init: 6.7735};
    var b2: dimensionless {init: 15.621};
    var b3: dimensionless {init: 28.753};
    var b4: dimensionless {init: 524.576};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    i_Kv4_3 = g_Kv4_3*P_open*(V-E_K);
    P_open = P_O+P_OI;
    ode(P_C0, time) = alpha_i*P_CI0+beta_a*P_C1-(beta_i+4.0{dimensionless}*alpha_a)*P_C0;
    ode(P_C1, time) = alpha_i/b1*P_CI1+4.0{dimensionless}*alpha_a*P_C0+2.0{dimensionless}*beta_a*P_C2-(f1*beta_i+beta_a+3.0{dimensionless}*alpha_a)*P_C1;
    ode(P_C2, time) = alpha_i/b2*P_CI2+3.0{dimensionless}*alpha_a*P_C1+3.0{dimensionless}*beta_a*P_C3-(f2*beta_i+2.0{dimensionless}*beta_a+2.0{dimensionless}*alpha_a)*P_C2;
    ode(P_C3, time) = alpha_i/b3*P_CI3+2.0{dimensionless}*alpha_a*P_C2+4.0{dimensionless}*beta_a*P_O-(f3*beta_i+3.0{dimensionless}*beta_a+alpha_a)*P_C3;
    ode(P_O, time) = alpha_a*P_C3+alpha_i/b4*P_OI-(f4*beta_i+4.0{dimensionless}*beta_a)*P_O;
    ode(P_CI0, time) = beta_i*P_C0+beta_a/f1*P_C1-(alpha_i+b1*4.0{dimensionless}*alpha_a)*P_CI0;
    ode(P_CI1, time) = f1*2.0{dimensionless}*beta_a/f2*P_CI2+b1*4.0{dimensionless}*alpha_a*P_CI0+f1*beta_i*P_C1-(b2*3.0{dimensionless}*alpha_a/b1+alpha_i/b1+beta_a/f1)*P_CI1;
    ode(P_CI2, time) = f2*3.0{dimensionless}*beta_a/f3*P_CI3+b2*3.0{dimensionless}*alpha_a/b1*P_CI1+f2*beta_i*P_C2-(b3*2.0{dimensionless}*alpha_a/b2+alpha_i/b2+f1*2.0{dimensionless}*beta_a/f2)*P_CI2;
    ode(P_CI3, time) = f3*4.0{dimensionless}*beta_a/f4*P_OI+b3*2.0{dimensionless}*alpha_a/b2*P_CI2+f3*beta_i*P_C3-(b4*alpha_a/b3+alpha_i/b3+f2*3.0{dimensionless}*beta_a/f3)*P_CI3;
    ode(P_OI, time) = b4*alpha_a/b3*P_CI3+f4*beta_i*P_O-(alpha_i/b4+f3*4.0{dimensionless}*beta_a/f4)*P_OI;
    alpha_a = alpha_a0*exp(a_a);
    beta_a = beta_a0*exp(-b_a);
    alpha_i = alpha_i0*exp(-a_i);
    beta_i = beta_i0*exp(b_i);
  enddef;

  def comp Kv1_4_current as
    var i_Kv1_4: microA_per_microF {pub: out};
    var i_Kv1_4_K: microA_per_microF;
    var i_Kv1_4_Na: microA_per_microF;
    var alpha: dimensionless {initail_value: 0.02};
    var P_open: dimensionless;
    var P_C0: dimensionless;
    var P_C1: dimensionless;
    var P_C2: dimensionless;
    var P_C3: dimensionless;
    var P_CI0: dimensionless;
    var P_CI1: dimensionless;
    var P_CI2: dimensionless;
    var P_CI3: dimensionless;
    var P_O: dimensionless;
    var P_OI: dimensionless;
    var a_a: per_millivolt {init: 0.006950};
    var b_a: per_millivolt {init: 0.08527};
    var a_i: per_millivolt {init: 0.0};
    var b_i: per_millivolt {init: 0.0};
    var alpha_a0: per_millisecond {init: 1.8931};
    var beta_a0: per_millisecond {init: 0.01179};
    var alpha_i0: per_millisecond {init: 0.002963};
    var beta_i0: per_millisecond {init: 1.0571E-4};
    var alpha_a: per_millisecond;
    var beta_a: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var f1: dimensionless {init: 0.2001};
    var f2: dimensionless {init: 0.3203};
    var f3: dimensionless {init: 13.509};
    var f4: dimensionless {init: 1151.765};
    var b1: dimensionless {init: 2.2300};
    var b2: dimensionless {init: 12.000};
    var b3: dimensionless {init: 5.370};
    var b4: dimensionless {init: 5.240};
    var P_Kv1_4: mm_per_s {init: 1.709E-6};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var C_sc: picoF_per_mm2 {pub: in};
    i_Kv1_4 = i_Kv1_4_K+i_Kv1_4_Na;
    i_Kv1_4_K = P_Kv1_4/C_sc*(sqr(F)*V/(R*T))*P_open*((Ki-Ko*exp(-(V*F)/(R*T)))/(1.0{dimensionless}-exp(-(V*F)/(R*T))));
    i_Kv1_4_Na = alpha*P_Kv1_4/C_sc*(sqr(F)*V/(R*T))*P_open*((Ki-Ko*exp(-(V*F)/(R*T)))/(1.0{dimensionless}-exp(-(V*F)/(R*T))));
    P_open = P_O+P_OI;
    ode(P_C0, time) = alpha_i*P_CI0+beta_a*P_C1-(beta_i+4.0{dimensionless}*alpha_a)*P_C0;
    ode(P_C1, time) = alpha_i/b1*P_CI1+4.0{dimensionless}*alpha_a*P_C0+2.0{dimensionless}*beta_a*P_C2-(f1*beta_i+beta_a+3.0{dimensionless}*alpha_a)*P_C1;
    ode(P_C2, time) = alpha_i/b2*P_CI2+3.0{dimensionless}*alpha_a*P_C1+3.0{dimensionless}*beta_a*P_C3-(f2*beta_i+2.0{dimensionless}*beta_a+2.0{dimensionless}*alpha_a)*P_C2;
    ode(P_C3, time) = alpha_i/b3*P_CI3+2.0{dimensionless}*alpha_a*P_C2+4.0{dimensionless}*beta_a*P_O-(f3*beta_i+3.0{dimensionless}*beta_a+alpha_a)*P_C3;
    ode(P_O, time) = alpha_a*P_C3+alpha_i/b4*P_OI-(f4*beta_i+4.0{dimensionless}*beta_a)*P_O;
    ode(P_CI0, time) = beta_i*P_C0+beta_a/f1*P_C1-(alpha_i+b1*4.0{dimensionless}*alpha_a)*P_CI0;
    ode(P_CI1, time) = f1*2.0{dimensionless}*beta_a/f2*P_CI2+b1*4.0{dimensionless}*alpha_a*P_CI0+f1*beta_i*P_C1-(b2*3.0{dimensionless}*alpha_a/b1+alpha_i/b1+beta_a/f1)*P_CI1;
    ode(P_CI2, time) = f2*3.0{dimensionless}*beta_a/f3*P_CI3+b2*3.0{dimensionless}*alpha_a/b1*P_CI1+f2*beta_i*P_C2-(b3*2.0{dimensionless}*alpha_a/b2+alpha_i/b2+f1*2.0{dimensionless}*beta_a/f2)*P_CI2;
    ode(P_CI3, time) = f3*4.0{dimensionless}*beta_a/f4*P_OI+b3*2.0{dimensionless}*alpha_a/b2*P_CI2+f3*beta_i*P_C3-(b4*alpha_a/b3+alpha_i/b3+f2*3.0{dimensionless}*beta_a/f3)*P_CI3;
    ode(P_OI, time) = b4*alpha_a/b3*P_CI3+f4*beta_i*P_O-(alpha_i/b4+f3*4.0{dimensionless}*beta_a/f4)*P_OI;
    alpha_a = alpha_a0*exp(a_a);
    beta_a = beta_a0*exp(-b_a);
    alpha_i = alpha_i0*exp(-a_i);
    beta_i = beta_i0*exp(b_i);
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: microA_per_microF {pub: out};
    var g_K1: milliS_per_microF {init: 2.8};
    var K_mK1: millimolar {init: 13.0};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: joule_per_mole_kelvin {pub: in, priv: out};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_millimole {pub: in, priv: out};
    var E_K: millivolt {pub: in, priv: out};
    var Ko: millimolar {pub: in};
    var K1_infinity_V: dimensionless {priv: in};
    i_K1 = g_K1*K1_infinity_V*(Ko/(Ko+K_mK1))*(V-E_K);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity_V: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_K: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    K1_infinity_V = 1.0{dimensionless}/(2.0{dimensionless}+exp(1.5{dimensionless}*(F/(R*T))*(V-E_K)));
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: microA_per_microF {pub: out};
    var g_Kp: milliS_per_microF {init: 0.002216};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var Kp_V: dimensionless {priv: in};
    i_Kp = g_Kp*Kp_V*(V-E_K);
  enddef;

  def comp plateau_potassium_current_Kp_gate as
    var Kp_V: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    Kp_V = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: microA_per_microF {pub: out};
    var K_mCa: millimolar {init: 1.38};
    var K_mNa: millimolar {init: 87.5};
    var K_NaCa: microA_per_microF {init: 0.30};
    var K_sat: dimensionless {init: 0.2};
    var eta: dimensionless {init: 0.35};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    i_NaCa = K_NaCa*(5000.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless})))*(1.0{dimensionless}/(K_mCa+Cao))*(1.0{dimensionless}/(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V*(F/(R*T)))))*(exp(eta*V*(F/(R*T)))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V*(F/(R*T)))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: microA_per_microF {pub: out};
    var I_NaK: microA_per_microF {init: 0.693};
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10.0};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*(V*F/(R*T)))+0.0365{dimensionless}*sigma*exp(-(V*F/(R*T))));
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{dimensionless})-1.0{dimensionless});
    i_NaK = I_NaK*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless})))*(Ko/(Ko+K_mKo));
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: microA_per_microF {pub: out};
    var K_mpCa: millimolar {init: 0.00005};
    var I_pCa: microA_per_microF {init: 0.05};
    var time: millisecond {pub: in};
    var Cai: millimolar {pub: in};
    i_p_Ca = I_pCa*(Cai/(K_mpCa+Cai));
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: microA_per_microF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.0003842};
    var E_Ca: millivolt;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp sodium_background_current as
    var i_Na_b: microA_per_microF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.0031};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  def comp L_type_Ca_current as
    var i_Ca: microA_per_microF {pub: out};
    var i_Ca_K: microA_per_microF {pub: out};
    var P_Ca: cm_per_second {init: 0.0003125};
    var P_K: cm_per_second {init: 0.000000579};
    var p_k: cm_per_second;
    var i_Ca_half: microA_per_microF {init: -0.265};
    var i_Ca_max: microA_per_microF;
    var O: dimensionless {init: 0.0};
    var O_Ca: dimensionless {init: 0.0};
    var alpha: per_millisecond;
    var beta: per_millisecond;
    var gamma: per_millisecond;
    var alpha_a: per_millisecond;
    var beta_b: per_millisecond;
    var a: dimensionless {init: 2.0};
    var b: dimensionless {init: 2.0};
    var g: per_millisecond {init: 2.0};
    var f: per_millisecond {init: 0.3};
    var g_: per_millisecond {init: 7.0};
    var f_: per_millisecond {init: 0.005};
    var omega: per_millisecond {init: 0.01};
    var C0: dimensionless {init: 0.99802};
    var C1: dimensionless {init: 0.0000019544};
    var C2: dimensionless {init: 0.0};
    var C3: dimensionless {init: 0.0};
    var C4: dimensionless {init: 0.0};
    var C_Ca0: dimensionless {init: 0.0019734};
    var C_Ca1: dimensionless {init: 0.0};
    var C_Ca2: dimensionless {init: 0.0};
    var C_Ca3: dimensionless {init: 0.0};
    var C_Ca4: dimensionless {init: 0.0};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var C_sc: picoF_per_mm2 {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var y: dimensionless {priv: in};
    i_Ca = i_Ca_max*y*(O+O_Ca);
    i_Ca_K = p_k/C_sc*y*(O+O_Ca)*(V*sqr(F)/(R*T))*((Ki*exp(V*F/(R*T))-Ko)/(exp(V*F/(R*T))-1.0{dimensionless}));
    p_k = P_K/(1.0{dimensionless}+i_Ca_max/i_Ca_half);
    i_Ca_max = P_Ca/C_sc*(4.0{dimensionless}*V*sqr(F)/(R*T))*((0.001{dimensionless}*exp(2.0{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Cao)/(exp(2.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    alpha = 0.4{per_millisecond}*exp((V+2.0{millivolt})/10.0{millivolt});
    beta = 0.05{per_millisecond}*exp(-(V+2.0{millivolt})/13.0{millivolt});
    alpha_a = alpha*a;
    beta_b = beta/b;
    gamma = 0.10375{dimensionless}*Ca_ss;
    ode(C0, time) = beta*C1+omega*C_Ca0-(4.0{dimensionless}*alpha+gamma)*C0;
    ode(C1, time) = 4.0{dimensionless}*alpha*C0+2.0{dimensionless}*beta*C2+omega/b*C_Ca1-(beta+3.0{dimensionless}*alpha+gamma*a)*C1;
    ode(C2, time) = 3.0{dimensionless}*alpha*C1+3.0{dimensionless}*beta*C3+omega/sqr(b)*C_Ca2-(beta*2.0{dimensionless}+2.0{dimensionless}*alpha+gamma*sqr(a))*C2;
    ode(C3, time) = 2.0{dimensionless}*alpha*C2+4.0{dimensionless}*beta*C4+omega/pow(b, 3.0{dimensionless})*C_Ca3-(beta*3.0{dimensionless}+alpha+gamma*pow(a, 3.0{dimensionless}))*C3;
    ode(C4, time) = alpha*C3+g*O+omega/pow(b, 4.0{dimensionless})*C_Ca4-(beta*4.0{dimensionless}+f+gamma*pow(a, 4.0{dimensionless}))*C4;
    ode(O, time) = f*C4-g*O;
    ode(C_Ca0, time) = beta_b*C_Ca1+gamma*C_Ca0-(4.0{dimensionless}*alpha_a+omega)*C_Ca0;
    ode(C_Ca1, time) = 4.0{dimensionless}*alpha_a*C_Ca0+2.0{dimensionless}*beta_b*C_Ca2+gamma*a*C1-(beta_b+3.0{dimensionless}*alpha_a+omega/b)*C_Ca1;
    ode(C_Ca2, time) = 3.0{dimensionless}*alpha_a*C_Ca1+3.0{dimensionless}*beta_b*C_Ca3+gamma*sqr(a)*C2-(beta_b*2.0{dimensionless}+2.0{dimensionless}*alpha_a+omega/sqr(b))*C_Ca2;
    ode(C_Ca3, time) = 2.0{dimensionless}*alpha_a*C_Ca2+4.0{dimensionless}*beta_b*C_Ca4+gamma*pow(a, 3.0{dimensionless})*C3-(beta_b*3.0{dimensionless}+alpha_a+omega/pow(b, 3.0{dimensionless}))*C_Ca3;
    ode(C_Ca4, time) = alpha_a*C_Ca3+g_*O_Ca+gamma*pow(a, 4.0{dimensionless})*C4-(beta_b*4.0{dimensionless}+f_+omega/pow(b, 4.0{dimensionless}))*C_Ca4;
    ode(O_Ca, time) = f_*C_Ca4-g_*O_Ca;
  enddef;

  def comp L_type_Ca_current_y_gate as
    var y: dimensionless {pub: out, init: 0.7959};
    var y_infinity: dimensionless;
    var tau_y: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(y, time) = (y_infinity-y)/tau_y;
    y_infinity = 0.8{dimensionless}/(1.0{dimensionless}+exp((V+12.5{millivolt})/5.0{millivolt}))+0.2{dimensionless};
    tau_y = 20.0{dimensionless}+600.0{dimensionless}/(1.0{dimensionless}+exp((V+20.0{millivolt})/9.5{millivolt}));
  enddef;

  def comp RyR_channel as
    var J_rel: millimolar_per_millisecond {pub: out};
    var v1: per_millisecond {init: 1.8};
    var k_a_plus: millimolar4_per_millisecond {init: 12150000000.0};
    var k_a_minus: per_millisecond {init: 0.576};
    var k_b_plus: millimolar3_per_millisecond {init: 4050000.0};
    var k_b_minus: per_millisecond {init: 1.930};
    var k_c_plus: per_millisecond {init: 0.100};
    var k_c_minus: per_millisecond {init: 0.0008};
    var P_O1: dimensionless {init: 0.0006027};
    var P_O2: dimensionless {init: 0.000000002882};
    var P_C1: dimensionless {init: 0.4929};
    var P_C2: dimensionless {init: 0.5056};
    var n: dimensionless {init: 4.0};
    var m: dimensionless {init: 3.0};
    var time: millisecond {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    ode(P_C1, time) = -k_a_plus*pow(Ca_ss, n)*P_C1+k_a_minus*P_O1;
    ode(P_O1, time) = k_a_plus*pow(Ca_ss, n)*P_C1-(k_a_minus*P_O1+k_b_plus*pow(Ca_ss, m)*P_O1+k_c_plus*P_O1)+k_b_minus*P_O2+k_c_minus*P_C2;
    ode(P_O2, time) = k_b_plus*pow(Ca_ss, m)*P_O1-k_b_minus*P_O2;
    ode(P_C2, time) = k_c_plus*P_O1-k_c_minus*P_C2;
    J_rel = v1*(P_O1+P_O2)*(Ca_JSR-Ca_ss);
  enddef;

  def comp SERCA2a_pump as
    var J_up: millimolar_per_millisecond {pub: out};
    var K_fb: millimolar {init: 0.000168};
    var K_rb: millimolar {init: 3.29};
    var fb: dimensionless;
    var rb: dimensionless;
    var Vmaxf: millimolar_per_millisecond {init: 0.0000813};
    var Vmaxr: millimolar_per_millisecond {init: 0.000318};
    var K_SR: dimensionless {init: 1.0};
    var N_fb: dimensionless {init: 1.2};
    var N_rb: dimensionless {init: 1.0};
    var time: millisecond {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    J_up = K_SR*((Vmaxf*fb-Vmaxr*rb)/(1.0{dimensionless}+fb+rb));
    fb = pow(Cai/K_fb, N_fb);
    rb = pow(Ca_NSR/K_rb, N_rb);
  enddef;

  def comp intracellular_Ca_fluxes as
    var J_tr: millimolar_per_millisecond {pub: out};
    var J_xfer: millimolar_per_millisecond {pub: out};
    var J_trpn: millimolar_per_millisecond {pub: out};
    var tau_tr: millisecond {init: 0.5747};
    var tau_xfer: millisecond {init: 26.7};
    var HTRPNCa: millimolar {init: 0.13664};
    var LTRPNCa: millimolar {init: 0.0055443};
    var J_HTRPNCa: millimolar_per_millisecond;
    var J_LTRPNCa: millimolar_per_millisecond;
    var HTRPN_tot: millimolar {init: 0.140};
    var LTRPN_tot: millimolar {init: 0.070};
    var k_htrpn_plus: millimolar_per_millisecond {init: 20.0};
    var k_htrpn_minus: per_millisecond {init: 0.0000066};
    var k_ltrpn_plus: millimolar_per_millisecond {init: 40.0};
    var k_ltrpn_minus: per_millisecond {init: 0.040};
    var time: millisecond {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    J_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    J_xfer = (Ca_ss-Cai)/tau_xfer;
    J_trpn = J_HTRPNCa+J_LTRPNCa;
    J_HTRPNCa = ode(HTRPNCa, time);
    ode(HTRPNCa, time) = k_htrpn_plus*Cai*(HTRPN_tot-HTRPNCa)-k_htrpn_minus*HTRPNCa;
    J_LTRPNCa = ode(LTRPNCa, time);
    ode(LTRPNCa, time) = k_ltrpn_plus*Cai*(LTRPN_tot-LTRPNCa)-k_ltrpn_minus*LTRPNCa;
  enddef;

  def comp intracellular_ion_concentrations as
    var Nai: millimolar {pub: out, init: 10.0};
    var Cai: millimolar {pub: out, init: 0.00008464};
    var Ki: millimolar {pub: out, init: 159.48};
    var Ca_ss: millimolar {pub: out, init: 0.0001315};
    var Ca_JSR: millimolar {pub: out, init: 0.2616};
    var Ca_NSR: millimolar {pub: out, init: 0.2620};
    var A_cap: cm2 {init: 0.0001534};
    var V_myo: micro_litre {init: 0.00002584};
    var V_JSR: micro_litre {init: 0.00000016};
    var V_NSR: micro_litre {init: 0.0000021};
    var V_SS: micro_litre {init: 0.0000000012};
    var K_mCMDN: millimolar {init: 0.00238};
    var K_mCSQN: millimolar {init: 0.8};
    var CMDN_tot: millimolar {init: 0.05};
    var CSQN_tot: millimolar {init: 15.0};
    var beta_i: millimolar;
    var beta_SS: millimolar;
    var beta_JSR: millimolar;
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var C_sc: picoF_per_mm2 {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Ca: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_Ca_K: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_to1: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var J_up: millimolar_per_millisecond {pub: in};
    var J_rel: millimolar_per_millisecond {pub: in};
    var J_xfer: millimolar_per_millisecond {pub: in};
    var J_trpn: millimolar_per_millisecond {pub: in};
    var J_tr: millimolar_per_millisecond {pub: in};
    ode(Cai, time) = beta_i*(J_xfer-(J_up+J_trpn+(i_Ca_b-2.0{dimensionless}*i_NaCa+i_p_Ca)*(A_cap*C_sc/(2.0{dimensionless}*V_myo*F))));
    ode(Nai, time) = -(i_Na+i_Na_b+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*(A_cap*C_sc/(V_myo*F));
    ode(Ki, time) = -(i_Ca_K+i_Kr+i_Ks+i_K1+i_Kp+i_to1+i_NaK*(-2.0{dimensionless}))*(A_cap*C_sc/(V_myo*F));
    beta_i = 1.0{dimensionless}/(1.0{dimensionless}+CMDN_tot*K_mCMDN/(K_mCMDN+sqr(Cai)));
    beta_SS = 1.0{dimensionless}/(1.0{dimensionless}+CMDN_tot*K_mCMDN/(K_mCMDN+sqr(Ca_ss)));
    beta_JSR = 1.0{dimensionless}/(1.0{dimensionless}+CSQN_tot*K_mCSQN/(K_mCSQN+sqr(Ca_JSR)));
    ode(Ca_ss, time) = beta_SS*(J_rel*(V_JSR/V_SS)-J_xfer*(V_myo/V_SS)-i_Ca*(A_cap*C_sc/(2.0{dimensionless}*V_SS*F)));
    ode(Ca_JSR, time) = beta_JSR*(J_tr-J_rel);
    ode(Ca_NSR, time) = J_up*(V_myo/V_NSR)-J_tr*(V_JSR/V_NSR);
  enddef;

  def comp standard_ionic_concentrations as
    var Nao: millimolar {pub: out, init: 138.0};
    var Cao: millimolar {pub: out, init: 2.0};
    var Ko: millimolar {pub: out, init: 4.0};
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp rapid_activating_delayed_rectifiyer_K_current incl
        comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate;
      endcomp;
      comp slow_activating_delayed_rectifiyer_K_current incl
        comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate;
      endcomp;
      comp transient_outward_potassium_current incl
        comp Kv4_3_current;
        comp Kv1_4_current;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp plateau_potassium_current incl
        comp plateau_potassium_current_Kp_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump;
      comp calcium_background_current;
      comp sodium_background_current;
      comp L_type_Ca_current incl
        comp L_type_Ca_current_y_gate;
      endcomp;
      comp RyR_channel;
      comp SERCA2a_pump;
      comp intracellular_Ca_fluxes;
      comp intracellular_ion_concentrations;
      comp standard_ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp rapid_activating_delayed_rectifiyer_K_current incl
      comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate;
    endcomp;
    comp slow_activating_delayed_rectifiyer_K_current incl
      comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate;
    endcomp;
    comp transient_outward_potassium_current incl
      comp Kv4_3_current;
      comp Kv1_4_current;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
    comp plateau_potassium_current incl
      comp plateau_potassium_current_Kp_gate;
    endcomp;
    comp L_type_Ca_current incl
      comp L_type_Ca_current_y_gate;
    endcomp;
  enddef;
  // "Time" is passed from the "environment" component into the
  // "membrane" and current components.
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and environment for
    vars time and time;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between RyR_channel and environment for
    vars time and time;
  enddef;
  def map between SERCA2a_pump and environment for
    vars time and time;
  enddef;
  def map between intracellular_Ca_fluxes and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  // Several variables are passed between the "membrane" and its sub-components.
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and rapid_activating_delayed_rectifiyer_K_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and slow_activating_delayed_rectifiyer_K_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and transient_outward_potassium_current for
    vars V and V;
    vars i_to1 and i_to1;
    vars R and R;
    vars T and T;
    vars F and F;
    vars C_sc and C_sc;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and L_type_Ca_current for
    vars V and V;
    vars i_Ca and i_Ca;
    vars i_Ca_K and i_Ca_K;
    vars R and R;
    vars T and T;
    vars F and F;
    vars C_sc and C_sc;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
    vars C_sc and C_sc;
  enddef;
  // Several variables are passed between the sibling components.
  def map between fast_sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and standard_ionic_concentrations for
    vars Nao and Nao;
  enddef;
  def map between intracellular_ion_concentrations and rapid_activating_delayed_rectifiyer_K_current for
    vars i_Kr and i_Kr;
    vars Ki and Ki;
  enddef;
  def map between standard_ionic_concentrations and rapid_activating_delayed_rectifiyer_K_current for
    vars Ko and Ko;
  enddef;
  def map between transient_outward_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between plateau_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between intracellular_ion_concentrations and slow_activating_delayed_rectifiyer_K_current for
    vars i_Ks and i_Ks;
    vars Ki and Ki;
    vars Nai and Nai;
  enddef;
  def map between standard_ionic_concentrations and slow_activating_delayed_rectifiyer_K_current for
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between transient_outward_potassium_current and intracellular_ion_concentrations for
    vars i_to1 and i_to1;
    vars Ki and Ki;
    vars Nai and Nai;
  enddef;
  def map between transient_outward_potassium_current and standard_ionic_concentrations for
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between time_independent_potassium_current and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
  enddef;
  def map between time_independent_potassium_current and standard_ionic_concentrations for
    vars Ko and Ko;
  enddef;
  def map between plateau_potassium_current and intracellular_ion_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between Na_Ca_exchanger and intracellular_ion_concentrations for
    vars Cai and Cai;
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and standard_ionic_concentrations for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars Nao and Nao;
    vars Ko and Ko;
  enddef;
  def map between sarcolemmal_calcium_pump and intracellular_ion_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between calcium_background_current and intracellular_ion_concentrations for
    vars Cai and Cai;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between calcium_background_current and standard_ionic_concentrations for
    vars Cao and Cao;
  enddef;
  def map between sodium_background_current and intracellular_ion_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between L_type_Ca_current and intracellular_ion_concentrations for
    vars i_Ca_K and i_Ca_K;
    vars i_Ca and i_Ca;
    vars Ki and Ki;
    vars Ca_ss and Ca_ss;
  enddef;
  def map between L_type_Ca_current and standard_ionic_concentrations for
    vars Ko and Ko;
    vars Cao and Cao;
  enddef;
  def map between RyR_channel and intracellular_ion_concentrations for
    vars J_rel and J_rel;
    vars Ca_ss and Ca_ss;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between SERCA2a_pump and intracellular_ion_concentrations for
    vars J_up and J_up;
    vars Cai and Cai;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between intracellular_Ca_fluxes and intracellular_ion_concentrations for
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
    vars J_trpn and J_trpn;
    vars Cai and Cai;
    vars Ca_NSR and Ca_NSR;
    vars Ca_ss and Ca_ss;
    vars Ca_JSR and Ca_JSR;
  enddef;
  //
  // Various variables are passed between parent components and their
  // encapsulated gates.
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars X_kr and X_kr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars X_ks and X_ks;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and Kv4_3_current for
    vars time and time;
    vars V and V;
    vars E_K and E_K;
    vars i_Kv4_3 and i_Kv4_3;
  enddef;
  def map between transient_outward_potassium_current and Kv1_4_current for
    vars time and time;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars C_sc and C_sc;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_Kv1_4 and i_Kv1_4;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars time and time;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars E_K and E_K;
    vars K1_infinity_V and K1_infinity_V;
  enddef;
  def map between plateau_potassium_current and plateau_potassium_current_Kp_gate for
    vars Kp_V and Kp_V;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
enddef;
