// This CellML file was generated on 3/18/2013 at 3:27:44 at PM using:
//
// COR (0.9.31.1409)
// Copyright 2002-2013 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Francis; Given Febe; Febe.Francis@nuim.ie; Orgname National University of Ireland Maynooth; Orgunit Hamilton Institute
// created: W3CDTF 2013-03-18
def model francis_miriam_middleton_2013_realistic as
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit per_cm as
    unit metre {pref: centi, expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit pl as
    unit litre {pref: pico};
  enddef;
  def unit pF as
    unit farad {pref: pico};
  enddef;
  def unit pF_per_sqcm as
    unit farad {pref: pico};
    unit cm {expo: -2};
  enddef;
  def unit sqcm as
    unit cm {expo: 2};
  enddef;
  def unit pA as
    unit ampere {pref: pico};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mJ_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit per_mMsq_ms as
    unit mM {expo: -2};
    unit ms {expo: -1};
  enddef;
  def unit per_mM_ms as
    unit mM {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit pA_per_mM as
    unit pA;
    unit mM {expo: -1};
  enddef;
  def unit nS as
    unit pA;
    unit mV {expo: -1};
  enddef;

  def comp environment as
    var t: ms {pub: out};
    var R: mJ_per_mole_kelvin {init: 8314.472};
    var T: kelvin {init: 310.15};
    var F: coulomb_per_mole {init: 96485.30929, pub: out};
    var V_tau: mV {pub: out};
    var Ca_o: mM {init: 1.8, pub: out};
    var Na_o: mM {init: 137, pub: out};
    var K_o: mM {init: 5.4, pub: out};
    var vol_cyt: pl {pub: out};
    var vol_pmu: pl {init: 5, pub: out};
    var fr_cyt: dimensionless {init: 0.5};
    vol_cyt = fr_cyt*vol_pmu;
    V_tau = R*T/F;
  enddef;

  def comp Membrane as
    var t: ms {pub: in};
    var V: mV {init: -49.42, pub: out};
    var V_tau: mV {pub: in};
    var VD: dimensionless {pub: out};
    var F: coulomb_per_mole {pub: in};
    var vol_cyt: pl {pub: in};
    var vol_pmu: pl {pub: in};
    var C_sp: pF_per_sqcm {init: 0.9e6};
    var Ca_o: mM {pub: in};
    var Na_o: mM {pub: in};
    var K_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Na_i: mM {pub: in};
    var K_i: mM {pub: in};
    var V_Ca: dimensionless {pub: out};
    var V_Na: dimensionless {pub: out};
    var V_K: dimensionless {pub: out};
    var A_pmu: sqcm;
    var SVR_pmu: per_cm {init: 1.6667e4};
    var J_Ca: mM_per_ms {pub: in};
    var J_Na: mM_per_ms {pub: in};
    var J_K: mM_per_ms {pub: in};
    VD = V/V_tau;
    A_pmu = SVR_pmu*vol_pmu*1e-3{cm}*1e-3{cm}*1e-3{cm}/1{pl};
    V_Ca = 0.5{dimensionless}*ln(Ca_o/Ca_i);
    V_Na = ln(Na_o/Na_i);
    V_K = ln(K_o/K_i);
    ode(V, t) = F*vol_cyt/(C_sp*A_pmu)*(J_Na+J_K+2{dimensionless}*J_Ca);
  enddef;

  def comp Cytosol as
    var t: ms {pub: in};
    var Ca_i: mM {init: 0.000188, pub: out};
    var Na_i: mM {init: 4.6876, pub: out};
    var K_i: mM {init: 126.05893, pub: out};
    var atp: mM {init: 2, pub: out};
    var J_Ca: mM_per_ms {pub: in};
    var J_Na: mM_per_ms {pub: in};
    var J_K: mM_per_ms {pub: in};
    ode(Ca_i, t) = J_Ca;
    ode(Na_i, t) = J_Na;
    ode(K_i, t) = J_K;
  enddef;

  def comp calcium_dynamics as
    var J_Ca: mM_per_ms {pub: out};
    var J_ca: mM_per_ms;
    var F: coulomb_per_mole {pub: in};
    var I_CaL: pA {pub: in};
    var I_pmca: pA {pub: in};
    var I_xm: pA {pub: in};
    var vol_cyt: pl {pub: in};
    var J_calb: mM_per_ms {pub: in};
    var J_cam: mM_per_ms {pub: in};
    J_Ca = J_ca-(J_calb+4{dimensionless}*J_cam);
    J_ca = -1{dimensionless}/(2{dimensionless}*F*vol_cyt)*(I_CaL+2{dimensionless}*I_pmca-2{dimensionless}*I_xm);
  enddef;

  def comp sodium_dynamics as
    var F: coulomb_per_mole {pub: in};
    var J_Na: mM_per_ms {pub: out};
    var I_Na: pA {pub: in};
    var I_Nalk: pA {pub: in};
    var I_NaHCN: pA {pub: in};
    var I_xm: pA {pub: in};
    var I_nk: pA {pub: in};
    var vol_cyt: pl {pub: in};
    J_Na = -1{dimensionless}/(F*vol_cyt)*(3{dimensionless}*I_nk+3{dimensionless}*I_xm+I_Na+I_Nalk+I_NaHCN);
  enddef;

  def comp potassium_dynamics as
    var F: coulomb_per_mole {pub: in};
    var J_K: mM_per_ms {pub: out};
    var vol_cyt: pl {pub: in};
    var I_K: pA;
    var I_Ksk: pA {pub: in};
    var I_Kdr: pA {pub: in};
    var I_Kir: pA {pub: in};
    var I_nk: pA {pub: in};
    I_K = I_Ksk+I_Kdr+I_Kir;
    J_K = -1{dimensionless}/(F*vol_cyt)*(I_K-2{dimensionless}*I_nk);
  enddef;

  def comp calcium_buffer_dynamics as
    var t: ms {pub: in};
    var Ca_i: mM {pub: in};
    var Calb: mM {init: 0.0026};
    var Cam: mM {init: 0.0222};
    var Calbtot: mM {init: 0.005};
    var Camtot: mM {init: 0.0235};
    var CaCalb: mM;
    var CaCam: mM {pub: out};
    var J_calb: mM_per_ms {pub: out};
    var J_cam: mM_per_ms {pub: out};
    var kcal_1: per_mM_ms {init: 10};
    var kcal_2: per_ms {init: 2e-3};
    var kcam_cb: per_ms;
    var kcam_cd: per_ms {init: 0.003};
    var kcam_nb: per_ms;
    var kcam_nd: per_ms {init: 3};
    var alpha_cam: per_ms;
    var beta_cam: per_ms;
    J_calb = kcal_1*Calb*Ca_i-kcal_2*CaCalb;
    J_cam = alpha_cam*Cam-beta_cam*CaCam;
    kcam_cb = 12000{per_mMsq_ms}*sqr(Ca_i);
    kcam_nb = 3.7e6{per_mMsq_ms}*sqr(Ca_i);
    alpha_cam = kcam_cb*kcam_nb*(1{dimensionless}/(kcam_cb+kcam_nd)+1{dimensionless}/(kcam_cd+kcam_nd));
    beta_cam = kcam_cd*kcam_nd*(1{dimensionless}/(kcam_cb+kcam_nd)+1{dimensionless}/(kcam_cd+kcam_nd));
    CaCalb = Calbtot-Calb;
    CaCam = Camtot-Cam;
    ode(Calb, t) = -J_calb;
    ode(Cam, t) = -J_cam;
  enddef;

  def comp L_type_Ca_channel as
    var t: ms {pub: in};
    var V: mV {pub: in};
    var VD: dimensionless {pub: in};
    var V_Ca: dimensionless {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var I_CaL: pA {pub: out};
    var m_cal: dimensionless {init: 0.006271};
    var h_cal: dimensionless;
    var g_cal: pA_per_mM {init: 2101.2};
    I_CaL = g_cal*m_cal*h_cal*sqrt(Ca_i*Ca_o)*sinh(VD-V_Ca)/(sinh(VD)/VD);
    ode(m_cal, t) = (1{dimensionless}/(1{dimensionless}+exp(-(V+15{mV})/7{mV}))-m_cal)/(7.68{ms}*exp(-sqr((V+65{mV})/17.33{mV}))+0.7231{ms});
    h_cal = 0.00045{mM}/(0.00045{mM}+Ca_i);
  enddef;

  def comp transient_Na_channel as
    var t: ms {pub: in};
    var VD: dimensionless {pub: in};
    var V_Na: dimensionless {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var I_Na: pA {pub: out};
    var g_na: pA_per_mM {init: 907.68};
    var O_na: dimensionless;
    var m_na: dimensionless {init: 0.0952};
    var h_na: dimensionless {init: 0.1848};
    var A_mna: per_ms {init: 1.9651};
    var B_mna: per_ms {init: 0.0424};
    var A_hna: per_ms {init: 9.566e-5};
    var B_hna: per_ms {init: 0.5296};
    var za_mna: dimensionless {init: 1.7127};
    var zb_mna: dimensionless {init: 1.5581};
    var za_hna: dimensionless {init: -2.4317};
    var zb_hna: dimensionless {init: -1.1868};
    O_na = pow(m_na, 3{dimensionless})*h_na;
    ode(m_na, t) = A_mna*exp(za_mna*VD)*(1{dimensionless}-m_na)-B_mna*exp(-zb_mna*VD)*m_na;
    ode(h_na, t) = A_hna*exp(za_hna*VD)*(1{dimensionless}-h_na)-B_hna*exp(-zb_hna*VD)*h_na;
    I_Na = g_na*O_na*sqrt(Na_i*Na_o)*sinh(0.5{dimensionless}*(VD-V_Na))/(sinh(0.5{dimensionless}*VD)/(0.5{dimensionless}*VD));
  enddef;

  def comp Leak_Na_channel as
    var t: ms {pub: in};
    var VD: dimensionless {pub: in};
    var V_Na: dimensionless {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var I_Nalk: pA {pub: out};
    var g_nalk: pA_per_mM {init: 0.0053};
    I_Nalk = g_nalk*sqrt(Na_i*Na_o)*sinh(0.5{dimensionless}*(VD-V_Na))/(sinh(0.5{dimensionless}*VD)/(0.5{dimensionless}*VD));
  enddef;

  def comp HCN_channel as
    var t: ms {pub: in};
    var V: mV {pub: in};
    var VD: dimensionless {pub: in};
    var V_Na: dimensionless {pub: in};
    var V_K: dimensionless {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var I_NaHCN: pA {pub: out};
    var g_nahcn: pA_per_mM {init: 51.1};
    var O_hcn: dimensionless {init: 0.003, pub: out};
    var kf_hcn: per_ms;
    var kr_hcn: per_ms;
    var kf_free: per_ms;
    var kr_free: per_ms;
    var kf_bnd: per_ms;
    var kr_bnd: per_ms;
    var P_c: dimensionless;
    var P_o: dimensionless;
    var cAMP: mM {init: 1e-5};
    ode(O_hcn, t) = kf_hcn*(1{dimensionless}-O_hcn)-kr_hcn*O_hcn;
    kf_hcn = kf_free*P_c+kf_bnd*(1{dimensionless}-P_c);
    kr_hcn = kr_free*P_o+kr_bnd*(1{dimensionless}-P_o);
    kf_free = 0.006{per_ms}/(1{dimensionless}+exp((V+87.7{mV})/6.45{mV}));
    kr_free = 0.08{per_ms}/(1{dimensionless}+exp(-(V+51.7{mV})/7{mV}));
    kf_bnd = 0.0268{per_ms}/(1{dimensionless}+exp((V+94.2{mV})/13.3{mV}));
    kr_bnd = 0.08{per_ms}/(1{dimensionless}+exp(-(V+35.5{mV})/7{mV}));
    P_c = 1{dimensionless}/(1{dimensionless}+cAMP/1.163e-3{mM});
    P_o = 1{dimensionless}/(1{dimensionless}+cAMP/1.45e-5{mM});
    I_NaHCN = g_nahcn*O_hcn*sqrt(Na_i*Na_o)*sinh(0.5{dimensionless}*(VD-V_Na))/(sinh(0.5{dimensionless}*VD)/(0.5{dimensionless}*VD));
  enddef;

  def comp SK_K_channel as
    var Ca_i: mM {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var VD: dimensionless {pub: in};
    var V_K: dimensionless {pub: in};
    var O_sk: dimensionless;
    var I_Ksk: pA {pub: out};
    var g_ksk: pA_per_mM {init: 2.2515};
    O_sk = pow(Ca_i, 4.2{dimensionless})/(pow(0.35e-3{mM}, 4.2{dimensionless})+pow(Ca_i, 4.2{dimensionless}));
    I_Ksk = g_ksk*O_sk*sqrt(K_i*K_o)*sinh(0.5{dimensionless}*(VD-V_K))/(sinh(0.5{dimensionless}*VD)/(0.5{dimensionless}*VD));
  enddef;

  def comp DR_K_channel as
    var t: ms {pub: in};
    var V: mV {pub: in};
    var V_tau: mV {pub: in};
    var V_K: dimensionless {pub: in};
    var O_kdr: dimensionless;
    var m_kdr: dimensionless {init: 0.0932};
    var I_Kdr: pA {pub: out};
    var g_kdr: nS {init: 31.237};
    I_Kdr = g_kdr*O_kdr*(V-V_K*V_tau);
    O_kdr = pow(m_kdr, 3{dimensionless});
    ode(m_kdr, t) = (1{dimensionless}/(1{dimensionless}+exp(-(V+25{mV})/12{mV}))-m_kdr)/(18{ms}/(1{dimensionless}+exp((V+39{mV})/8{mV}))+1{ms});
  enddef;

  def comp IR_K_channel as
    var V: mV {pub: in};
    var V_tau: mV {pub: in};
    var V_K: dimensionless {pub: in};
    var O_kir: dimensionless;
    var I_Kir: pA {pub: out};
    var g_kir: nS {init: 13.816};
    I_Kir = g_kir*O_kir*(V-V_K*V_tau);
    O_kir = 1{dimensionless}/(1{dimensionless}+exp((V+85{mV})/12.1{mV}));
  enddef;

  def comp PMCA as
    var t: ms {pub: in};
    var VD: dimensionless {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var atp: mM {pub: in};
    var CaCam: mM {pub: in};
    var I_pmca: pA {pub: out};
    var y_pc: dimensionless {init: 0.483};
    var K_pmca: pA;
    var k_1pc: per_ms;
    var k_2pc: per_ms {init: 0.001};
    var k_3pc: per_ms {init: 0.001};
    var k_4pc: per_ms {init: 1};
    var P_E1Spc: dimensionless;
    var P_E2Spc: dimensionless;
    var P_E1pc: dimensionless;
    var P_E2pc: dimensionless;
    var alpha_pc: per_ms;
    var beta_pc: per_ms;
    var K_pci: mM;
    var K_pco: mM {init: 2};
    var k_pmca: dimensionless {init: 2.233};
    I_pmca = K_pmca*(k_1pc*P_E1Spc*y_pc-k_2pc*P_E2Spc*(1{dimensionless}-y_pc))*1{ms};
    K_pmca = k_pmca*(10.56{pA}*CaCam/(CaCam+0.00005{mM})+1.2{pA});
    ode(y_pc, t) = beta_pc*(1{dimensionless}-y_pc)-alpha_pc*y_pc;
    k_1pc = 1{per_ms}/(1{dimensionless}+0.1{mM}/atp);
    P_E1Spc = 1{dimensionless}/(1{dimensionless}+K_pci/Ca_i);
    P_E1pc = 1{dimensionless}-P_E1Spc;
    P_E2Spc = 1{dimensionless}/(1{dimensionless}+K_pco/Ca_o);
    P_E2pc = 1{dimensionless}-P_E2Spc;
    beta_pc = k_2pc*P_E2Spc+k_4pc*P_E2pc;
    alpha_pc = k_1pc*P_E1Spc+k_3pc*P_E1pc;
    K_pci = (173.6{dimensionless}/(1{dimensionless}+CaCam/0.00005{mM})+6.4{dimensionless})*1e-5{mM};
  enddef;

  def comp NaCa as
    var Na_i: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Ca_o: mM {pub: in};
    var del: dimensionless {init: 0.35};
    var I_xm: pA {pub: out};
    var VD: dimensionless {pub: in};
    var k_xm: pA {init: 0.0166};
    var Dr: mM4;
    I_xm = k_xm*(pow(Na_i, 3{dimensionless})*Ca_o*exp(del*VD)-pow(Na_o, 3{dimensionless})*Ca_i*exp((del-1{dimensionless})*VD))/Dr;
    Dr = (1{mM4}+0.001{dimensionless}*(pow(Na_i, 3{dimensionless})*Ca_o+pow(Na_o, 3{dimensionless})*Ca_i))*(1{dimensionless}+Ca_i/0.0069{mM});
  enddef;

  def comp sodium_pump as
    var t: ms {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_eff: mM;
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var atp: mM {pub: in};
    var VD: dimensionless {pub: in};
    var I_nk: pA {pub: out};
    var y_nk: dimensionless {init: 0.6213};
    var alpha_nk: per_ms;
    var beta_nk: per_ms;
    var P_E1Snk: dimensionless;
    var P_E2Snk: dimensionless;
    var P_E1Dnk: dimensionless;
    var P_E2Dnk: dimensionless;
    var k_1nk: per_ms;
    var k_2nk: per_ms {init: 0.04};
    var k_3nk: per_ms {init: 0.01};
    var k_4nk: per_ms {init: 0.165};
    var K_nknai: mM {init: 4.05};
    var K_nknao: mM {init: 69.8};
    var K_nkki: mM {init: 32.88};
    var K_nkko: mM {init: 0.258};
    var k_nk: pA {init: 1085.7};
    I_nk = k_nk*(k_1nk*P_E1Snk*y_nk-k_2nk*P_E2Snk*(1{dimensionless}-y_nk))*1{ms};
    k_1nk = 0.37{per_ms}/(1{dimensionless}+0.094{mM}/atp);
    Na_eff = Na_o*exp(-0.82{dimensionless}*VD);
    ode(y_nk, t) = beta_nk*(1{dimensionless}-y_nk)-alpha_nk*y_nk;
    beta_nk = k_2nk*P_E2Snk+k_4nk*P_E2Dnk;
    alpha_nk = k_1nk*P_E1Snk+k_3nk*P_E1Dnk;
    P_E1Snk = 1{dimensionless}/(1{dimensionless}+K_nknai/Na_i*(1{dimensionless}+K_i/K_nkki));
    P_E1Dnk = 1{dimensionless}/(1{dimensionless}+K_nkki/K_i*(1{dimensionless}+Na_i/K_nknai));
    P_E2Snk = 1{dimensionless}/(1{dimensionless}+K_nknao/Na_eff*(1{dimensionless}+K_o/K_nkko));
    P_E2Dnk = 1{dimensionless}/(1{dimensionless}+K_nkko/K_o*(1{dimensionless}+Na_eff/K_nknao));
  enddef;

  def group as containment for
    comp Membrane incl
      comp L_type_Ca_channel;
      comp transient_Na_channel;
      comp Leak_Na_channel;
      comp HCN_channel;
      comp SK_K_channel;
      comp DR_K_channel;
      comp IR_K_channel;
      comp sodium_pump;
      comp PMCA;
      comp NaCa;
    endcomp;
    comp Cytosol incl
      comp calcium_dynamics incl
        comp calcium_buffer_dynamics;
      endcomp;
      comp sodium_dynamics;
      comp potassium_dynamics;
    endcomp;
  enddef;
  def map between environment and Membrane for
    vars t and t;
    vars V_tau and V_tau;
    vars F and F;
    vars vol_cyt and vol_cyt;
    vars vol_pmu and vol_pmu;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between environment and Cytosol for
    vars t and t;
  enddef;
  def map between Membrane and Cytosol for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars K_i and K_i;
  enddef;
  def map between environment and calcium_dynamics for
    vars vol_cyt and vol_cyt;
    vars F and F;
  enddef;
  def map between Membrane and calcium_dynamics for
    vars J_Ca and J_Ca;
  enddef;
  def map between Cytosol and calcium_dynamics for
    vars J_Ca and J_Ca;
  enddef;
  def map between environment and sodium_dynamics for
    vars vol_cyt and vol_cyt;
    vars F and F;
  enddef;
  def map between Membrane and sodium_dynamics for
    vars J_Na and J_Na;
  enddef;
  def map between Cytosol and sodium_dynamics for
    vars J_Na and J_Na;
  enddef;
  def map between environment and potassium_dynamics for
    vars vol_cyt and vol_cyt;
    vars F and F;
  enddef;
  def map between Membrane and potassium_dynamics for
    vars J_K and J_K;
  enddef;
  def map between Cytosol and potassium_dynamics for
    vars J_K and J_K;
  enddef;
  def map between environment and calcium_buffer_dynamics for
    vars t and t;
  enddef;
  def map between Cytosol and calcium_buffer_dynamics for
    vars Ca_i and Ca_i;
  enddef;
  def map between calcium_dynamics and calcium_buffer_dynamics for
    vars J_calb and J_calb;
    vars J_cam and J_cam;
  enddef;
  def map between environment and L_type_Ca_channel for
    vars t and t;
    vars Ca_o and Ca_o;
  enddef;
  def map between Membrane and L_type_Ca_channel for
    vars V and V;
    vars VD and VD;
    vars V_Ca and V_Ca;
  enddef;
  def map between Cytosol and L_type_Ca_channel for
    vars Ca_i and Ca_i;
  enddef;
  def map between calcium_dynamics and L_type_Ca_channel for
    vars I_CaL and I_CaL;
  enddef;
  def map between environment and PMCA for
    vars t and t;
    vars Ca_o and Ca_o;
  enddef;
  def map between Membrane and PMCA for
    vars VD and VD;
  enddef;
  def map between Cytosol and PMCA for
    vars atp and atp;
    vars Ca_i and Ca_i;
  enddef;
  def map between calcium_dynamics and PMCA for
    vars I_pmca and I_pmca;
  enddef;
  def map between calcium_buffer_dynamics and PMCA for
    vars CaCam and CaCam;
  enddef;
  def map between environment and NaCa for
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between Cytosol and NaCa for
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
  enddef;
  def map between Membrane and NaCa for
    vars VD and VD;
  enddef;
  def map between calcium_dynamics and NaCa for
    vars I_xm and I_xm;
  enddef;
  def map between sodium_dynamics and NaCa for
    vars I_xm and I_xm;
  enddef;
  def map between environment and sodium_pump for
    vars t and t;
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between Membrane and sodium_pump for
    vars VD and VD;
  enddef;
  def map between Cytosol and sodium_pump for
    vars atp and atp;
    vars Na_i and Na_i;
    vars K_i and K_i;
  enddef;
  def map between sodium_dynamics and sodium_pump for
    vars I_nk and I_nk;
  enddef;
  def map between potassium_dynamics and sodium_pump for
    vars I_nk and I_nk;
  enddef;
  def map between environment and transient_Na_channel for
    vars t and t;
    vars Na_o and Na_o;
  enddef;
  def map between Membrane and transient_Na_channel for
    vars VD and VD;
    vars V_Na and V_Na;
  enddef;
  def map between sodium_dynamics and transient_Na_channel for
    vars I_Na and I_Na;
  enddef;
  def map between Cytosol and transient_Na_channel for
    vars Na_i and Na_i;
  enddef;
  def map between environment and Leak_Na_channel for
    vars t and t;
    vars Na_o and Na_o;
  enddef;
  def map between Membrane and Leak_Na_channel for
    vars VD and VD;
    vars V_Na and V_Na;
  enddef;
  def map between Cytosol and Leak_Na_channel for
    vars Na_i and Na_i;
  enddef;
  def map between sodium_dynamics and Leak_Na_channel for
    vars I_Nalk and I_Nalk;
  enddef;
  def map between environment and HCN_channel for
    vars t and t;
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between Membrane and HCN_channel for
    vars V and V;
    vars VD and VD;
    vars V_Na and V_Na;
    vars V_K and V_K;
  enddef;
  def map between Cytosol and HCN_channel for
    vars Na_i and Na_i;
    vars K_i and K_i;
  enddef;
  def map between sodium_dynamics and HCN_channel for
    vars I_NaHCN and I_NaHCN;
  enddef;
  def map between environment and SK_K_channel for
    vars K_o and K_o;
  enddef;
  def map between Membrane and SK_K_channel for
    vars VD and VD;
    vars V_K and V_K;
  enddef;
  def map between Cytosol and SK_K_channel for
    vars K_i and K_i;
    vars Ca_i and Ca_i;
  enddef;
  def map between potassium_dynamics and SK_K_channel for
    vars I_Ksk and I_Ksk;
  enddef;
  def map between environment and DR_K_channel for
    vars t and t;
    vars V_tau and V_tau;
  enddef;
  def map between Membrane and DR_K_channel for
    vars V and V;
    vars V_K and V_K;
  enddef;
  def map between potassium_dynamics and DR_K_channel for
    vars I_Kdr and I_Kdr;
  enddef;
  def map between environment and IR_K_channel for
    vars V_tau and V_tau;
  enddef;
  def map between Membrane and IR_K_channel for
    vars V and V;
    vars V_K and V_K;
  enddef;
  def map between potassium_dynamics and IR_K_channel for
    vars I_Kir and I_Kir;
  enddef;
enddef;
// #aslanidi_2009
// species: Mouse
// bio_entity: Substantia nigra
// reference: subject_type keyword; electrophysiology; neuron
// reference: Family Francis; Given F; Family Garcia; Given M; Family Middleton; Given R; title A single Compartment model of pacemaking in dissasociated Substantia nigra neurons. Stability and energy analysis; title Journal of Computational Neuroscience; volume xx; first_page xx; last_page xx
