<?xml version="1.0"?>
<!--
This CellML file was generated on 5/05/2010 at 3:12:53 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" name="gupta_2009" cmeta:id="gupta_2009">

   <units name="hour">
      <unit multiplier="3600" units="second"/>
   </units>
   <units name="per_hour">
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="pmol_per_ug_DNA">
      <unit prefix="pico" units="mole"/>
      <unit prefix="micro" units="gram"/>
   </units>
   <units name="pmol_per_ug_DNA_per_hour">
      <unit units="pmol_per_ug_DNA"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="ug_DNA_per_pmol_per_hour">
      <unit exponent="-1" units="pmol_per_ug_DNA"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <component name="environment" cmeta:id="component0000">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="hour"/>
   </component>
   <component name="main" cmeta:id="component0001">
      <variable name="v_1" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0000"/>
      <variable name="v_2" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0001"/>
      <variable name="v_3" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0002"/>
      <variable name="v_4" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0003"/>
      <variable name="v_5" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0004"/>
      <variable name="v_6" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0005"/>
      <variable name="v_7" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0006"/>
      <variable name="v_8" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0007"/>
      <variable name="v_9" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0008"/>
      <variable name="v_10" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0009"/>
      <variable name="v_11" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0010"/>
      <variable name="v_12" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0011"/>
      <variable name="v_13" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0012"/>
      <variable name="v_14" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0013"/>
      <variable name="v_15" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0014"/>
      <variable name="v_16" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0015"/>
      <variable name="v_17" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0016"/>
      <variable name="v_18" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0017"/>
      <variable name="v_19" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0018"/>
      <variable name="v_20" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0019"/>
      <variable name="v_21" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0020"/>
      <variable name="v_22" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0021"/>
      <variable initial_value="355.637" name="k_1" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0022"/>
      <variable initial_value="1e-15" name="k_2" units="pmol_per_ug_DNA_per_hour" cmeta:id="variable0023"/>
      <variable initial_value="1e-15" name="k_3" units="per_hour" cmeta:id="variable0024"/>
      <variable initial_value="1e-15" name="k_4" units="per_hour" cmeta:id="variable0025"/>
      <variable initial_value="1e-15" name="k_5" units="ug_DNA_per_pmol_per_hour" cmeta:id="variable0026"/>
      <variable initial_value="0.33" name="k_6" units="per_hour" cmeta:id="variable0027"/>
      <variable initial_value="1e-15" name="k_7" units="per_hour" cmeta:id="variable0028"/>
      <variable initial_value="0.007" name="k_8" units="per_hour" cmeta:id="variable0029"/>
      <variable initial_value="0.187" name="k_9" units="per_hour" cmeta:id="variable0030"/>
      <variable initial_value="0.024" name="k_10" units="ug_DNA_per_pmol_per_hour" cmeta:id="variable0031"/>
      <variable initial_value="0.111" name="k_11" units="per_hour" cmeta:id="variable0032"/>
      <variable initial_value="0.098" name="k_12" units="per_hour" cmeta:id="variable0033"/>
      <variable initial_value="0.204" name="k_13" units="per_hour" cmeta:id="variable0034"/>
      <variable initial_value="1e-15" name="k_14" units="per_hour" cmeta:id="variable0035"/>
      <variable initial_value="0.061" name="k_15" units="per_hour" cmeta:id="variable0036"/>
      <variable initial_value="1e-15" name="k_16" units="per_hour" cmeta:id="variable0037"/>
      <variable initial_value="3.116" name="k_17" units="per_hour" cmeta:id="variable0038"/>
      <variable initial_value="0.054" name="k_18" units="per_hour" cmeta:id="variable0039"/>
      <variable initial_value="0.029" name="k_19" units="per_hour" cmeta:id="variable0040"/>
      <variable initial_value="0.014" name="k_20" units="per_hour" cmeta:id="variable0041"/>
      <variable initial_value="0.034" name="k_21" units="per_hour" cmeta:id="variable0042"/>
      <variable initial_value="0.116" name="k_22" units="per_hour" cmeta:id="variable0043"/>
      <variable cmeta:id="main_LPS" name="LPS" units="dimensionless"/>
      <variable initial_value="1" name="PIP_2" units="dimensionless" cmeta:id="variable0044"/>
      <variable cmeta:id="main_DG" initial_value="0" name="DG" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_GPCho" initial_value="1" name="GPCho" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_AA" initial_value="25" name="AA" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_HETE" initial_value="0" name="HETE" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_PGH_2" initial_value="0" name="PGH_2" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_PGE_2" initial_value="0" name="PGE_2" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_PGF_2a" initial_value="0" name="PGF_2a" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_PGD_2" initial_value="0" name="PGD_2" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_PGJ_2" initial_value="0" name="PGJ_2" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_dPGD_2" initial_value="0" name="dPGD_2" units="pmol_per_ug_DNA"/>
      <variable cmeta:id="main_dPGJ_2" initial_value="0" name="dPGJ_2" units="pmol_per_ug_DNA"/>
      <variable name="time" public_interface="in" units="hour" cmeta:id="variable0045"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>LPS</ci>
            <piecewise>
               <piece>
                  <apply>
                     <times/>
                     <ci>time</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_hour">2</cn>
                  </apply>
                  <apply>
                     <leq/>
                     <ci>time</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="hour">0.5</cn>
                  </apply>
               </piece>
               <piece>
                  <apply>
                     <minus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>time</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="hour">0.5</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="hour">1.5</cn>
                     </apply>
                  </apply>
                  <apply>
                     <and/>
                     <apply>
                        <gt/>
                        <ci>time</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="hour">0.5</cn>
                     </apply>
                     <apply>
                        <lt/>
                        <ci>time</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="hour">2</cn>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <ci>v_1</ci>
            <apply>
               <times/>
               <ci>LPS</ci>
               <ci>PIP_2</ci>
               <ci>k_1</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_2</ci>
            <apply>
               <times/>
               <ci>PIP_2</ci>
               <ci>k_2</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_3</ci>
            <apply>
               <times/>
               <ci>DG</ci>
               <ci>k_3</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_4</ci>
            <apply>
               <times/>
               <ci>AA</ci>
               <ci>k_4</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_5</ci>
            <apply>
               <times/>
               <ci>DG</ci>
               <ci>GPCho</ci>
               <ci>k_5</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_6</ci>
            <apply>
               <times/>
               <ci>LPS</ci>
               <ci>GPCho</ci>
               <ci>k_6</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_7</ci>
            <apply>
               <times/>
               <ci>GPCho</ci>
               <ci>k_7</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_8</ci>
            <apply>
               <times/>
               <ci>AA</ci>
               <ci>k_8</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_9</ci>
            <apply>
               <times/>
               <ci>HETE</ci>
               <ci>k_9</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_10</ci>
            <apply>
               <times/>
               <ci>DG</ci>
               <ci>AA</ci>
               <ci>k_10</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_11</ci>
            <apply>
               <times/>
               <ci>LPS</ci>
               <ci>AA</ci>
               <ci>k_11</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_12</ci>
            <apply>
               <times/>
               <ci>AA</ci>
               <ci>k_12</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_13</ci>
            <apply>
               <times/>
               <ci>PGH_2</ci>
               <ci>k_13</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_14</ci>
            <apply>
               <times/>
               <ci>PGE_2</ci>
               <ci>k_14</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_15</ci>
            <apply>
               <times/>
               <ci>PGH_2</ci>
               <ci>k_15</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_16</ci>
            <apply>
               <times/>
               <ci>PGF_2a</ci>
               <ci>k_16</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_17</ci>
            <apply>
               <times/>
               <ci>PGH_2</ci>
               <ci>k_17</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_18</ci>
            <apply>
               <times/>
               <ci>PGD_2</ci>
               <ci>k_18</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_19</ci>
            <apply>
               <times/>
               <ci>PGD_2</ci>
               <ci>k_19</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_20</ci>
            <apply>
               <times/>
               <ci>dPGD_2</ci>
               <ci>k_20</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_21</ci>
            <apply>
               <times/>
               <ci>PGJ_2</ci>
               <ci>k_21</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>v_22</ci>
            <apply>
               <times/>
               <ci>dPGJ_2</ci>
               <ci>k_22</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>AA</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>v_1</ci>
                                 <ci>v_2</ci>
                                 <ci>v_3</ci>
                              </apply>
                              <ci>v_4</ci>
                           </apply>
                           <ci>v_5</ci>
                           <ci>v_6</ci>
                           <ci>v_7</ci>
                        </apply>
                        <ci>v_8</ci>
                     </apply>
                     <ci>v_10</ci>
                  </apply>
                  <ci>v_11</ci>
               </apply>
               <ci>v_12</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>HETE</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_8</ci>
               <ci>v_9</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PGH_2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>v_10</ci>
                        <ci>v_11</ci>
                        <ci>v_12</ci>
                     </apply>
                     <ci>v_13</ci>
                  </apply>
                  <ci>v_15</ci>
               </apply>
               <ci>v_17</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PGE_2</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_13</ci>
               <ci>v_14</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PGF_2a</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_15</ci>
               <ci>v_16</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PGD_2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <ci>v_17</ci>
                  <ci>v_18</ci>
               </apply>
               <ci>v_19</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PGJ_2</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_18</ci>
               <ci>v_21</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>dPGD_2</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_19</ci>
               <ci>v_20</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>dPGJ_2</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v_21</ci>
               <ci>v_22</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="main"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>

   <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Description rdf:about="">
			<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
				<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
					<vCard:Family>Nunns</vCard:Family>
					<vCard:Given>Geoffrey</vCard:Given>
					<vCard:Other>Rogan</vCard:Other>
				</vCard:N>
				<vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
					<rdf:value>gnunns1@jhu.edu</rdf:value>
					<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
				</vCard:EMAIL>
				<vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
					<vCard:Orgname>The University of Auckland</vCard:Orgname>
					<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
				</vCard:ORG>
			</dc:creator>
			<dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
				<dcterms:W3CDTF>2010-05-11</dcterms:W3CDTF>
			</dcterms:created>
		</rdf:Description>
		<rdf:Description rdf:about="#gupta_2009">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">The Gupta et al. 2009 integrated model of eicosanoid metabolism and signaling based on lipidomics flux analysis.</dc:title>
			<cmeta:comment rdf:parseType="Resource">
				<rdf:value>This is the CellML description of Gupta et al.'s 2009 mathematical model of eicosanoid metabolism and signaling based on lipidomics flux analysis.</rdf:value>
				<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
					<vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Geoffrey Nunns</vCard:FN>
				</dc:creator>
			</cmeta:comment>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
				<dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
					<bqs:subject_type>keyword</bqs:subject_type>
					<rdf:value>
						<rdf:Bag>
							<rdf:li>signal transduction</rdf:li>
							<rdf:li>metabolism</rdf:li>
							<rdf:li>lipid</rdf:li>
						</rdf:Bag>
					</rdf:value>
				</dc:subject>
			</bqs:reference>
			<bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
				<bqs:Pubmed_id>19486676</bqs:Pubmed_id>
				<bqs:JournalArticle rdf:parseType="Resource">
					<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
						<rdf:Seq>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Gupta</vCard:Family>
										<vCard:Given>S</vCard:Given>
								    </vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Maurya</vCard:Family>
										<vCard:Given>M</vCard:Given>
										<vCard:Other>R</vCard:Other>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Stephens</vCard:Family>
										<vCard:Given>D</vCard:Given>
										<vCard:Other>L</vCard:Other>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Dennis</vCard:Family>
										<vCard:Given>E</vCard:Given>
										<vCard:Other>A</vCard:Other>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
										<vCard:Family>Subramaniam</vCard:Family>
										<vCard:Given>S</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
						</rdf:Seq>
					</dc:creator>
					<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">An integrated model of eicosanoid metabolism and signaling based on lipidomics flux analysis</dc:title>
					<dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
						<dcterms:W3CDTF>2009-06-03</dcterms:W3CDTF>
					</dcterms:issued>
					<bqs:Journal rdf:parseType="Resource">
						<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Biophysical Journal</dc:title>
					</bqs:Journal>
					<bqs:volume>96</bqs:volume>
					<bqs:first_page>4542</bqs:first_page>
					<bqs:last_page>4551</bqs:last_page>
				</bqs:JournalArticle>
			</bqs:reference>
		</rdf:Description>
	</rdf:RDF> 
</model>
