<?xml version="1.0"?>
<!--  FILE :  goforth_model_II_2002.xml

CREATED :  6th November 2002

LAST MODIFIED : 20th April 2005

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Goforth et al's 2002 mathematical model of Ca2+-activated K+ channels in pancreatic beta cells.

CHANGES:  
  09/04/2003 - AAC - Added publication date information.  
  20/04/2005 - PJV - Made MathML id's unique 
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xml:base="file:///H:/goforth_bertram_khan_zhang_sherman_satin_2002/goforth_bertram_khan_zhang_sherman_satin_2002.cellml" cmeta:id="goforth_bertram_khan_zhang_sherman_satin_2002_version02" name="goforth_bertram_khan_zhang_sherman_satin_2002_version02">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Calcium-activated K+ Channels in Pancreatic Beta-Cells</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This is the original unchecked version of the model imported from the previous
            CellML model repository, 24-Jan-2006.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
Pancreatic beta cells of the islets of Langerhans play an important role in the control of blood glucose levels by secreting insulin in response to an increase in extracellular glucose concentration.  Increased glucose concentration also induces rhythmical electrical activity in beta cells.  This activity consists of the periodic plateaus and spikes of Ca<superscript>2+</superscript>-dependent action potentials, which enhance Ca<superscript>2+</superscript> influx and insulin secretion.  Two K<subscript>Ca</subscript> channels are present in beta cells: a voltage dependent, "fast", large conductance K<subscript>Ca</subscript>, and a slowly activating and deactivating K<subscript>Ca</subscript> current, K<subscript>slow</subscript>.  K<subscript>slow</subscript> is thought to be responsible for islet pacemaking.  
</para>

<para>
Experimental data suggest that both cytosolic calcium and calcium from the endoplasmic reticulum (ER) play an essential role in the activation of K<subscript>slow</subscript> channels.  In their 2002 paper, P.B. Goforth, R. Bertram, F.A. Khan, M. Zhang, A. Sherman, and L.S. Satin develop two mathematical models to test this theory (see <xref linkend="fig_cell_diagram"/> below).  Their first minimal model lacks a separate subspace, and they found that this two component model (cytosol and ER) was insufficient to explain Ca<superscript>2+</superscript>-induced activation of K<subscript>slow</subscript> channels.  However, their second model incorporated a localised pool of Ca<superscript>2+</superscript> in a subspace located between the plasma membrane and the ER.  In this model, subspace [Ca<superscript>2+</superscript>] is positively correlated with changes in cytosolic [Ca<superscript>2+</superscript>], but with a gradient that reflects Ca<superscript>2+</superscript> efflux from the ER.  The simulations from this model were consistent with experimental data. </para>

<para>
The complete original paper reference is cited below:
</para>

<para>
<ulink url="http://www.jgp.org/cgi/content/abstract/120/3/307">Calcium-activated K<superscript>+</superscript> Channels of Mouse Beta-cells are Controlled by Both Store and Cytoplasmic Ca<superscript>2+</superscript>: Experimental and Theoretical Studies</ulink>, P.B. Goforth, R. Bertram, F.A. Khan, M. Zhang, A. Sherman, and L.S. Satin, 2002, <ulink url="http://www.jgp.org/">
            <emphasis>Journal of General Physiology</emphasis>
          </ulink>, 120, 307-322. (<ulink url="http://www.jgp.org/cgi/content/full/120/3/307">Full text</ulink> and <ulink url="http://www.jgp.org/cgi/reprint/120/3/307.pdf">PDF versions</ulink> of the article are available to subscribers on the Journal of General Physiology website.)  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=12198088&amp;dopt=Abstract">PubMed ID: 12198088</ulink> 
</para>

<para>
The raw CellML descriptions of the model can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>.
</para>

<informalfigure float="0" id="fig_cell_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>cell_diagram</title>
    </objectinfo>
    <imagedata fileref="goforth_2002.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the model of K<subscript>slow</subscript> activation by Ca<superscript>2+</superscript>.  Ca<superscript>2+</superscript> entering the beta-cell through voltage gated Ca<superscript>2+</superscript> channels (<emphasis>I<subscript>Ca</subscript>
            </emphasis>) is either pumped out of the cell by the Ca<superscript>2+</superscript> ATPase (<emphasis>J<subscript>PMCA</subscript>
            </emphasis>), or by Na<superscript>+</superscript>/Ca<superscript>2+</superscript> exchange, or it is pumped into the ER by SERCA (<emphasis>J<subscript>SERCA</subscript>
            </emphasis>).  Ca<superscript>2+</superscript> leaves the ER through specialised channels close to the K<subscript>slow</subscript> channels (<emphasis>J<subscript>RELEASE</subscript>
            </emphasis> and <emphasis>J<subscript>X</subscript>
            </emphasis>).  This produces a local calcium concentration gradient in the subspace.  Subspace calcium is passively exchanged with cytosolic calcium.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  <!--
    Below, we define some additional units for association with variables and
    constants within the model. The identifiers are fairly self-explanatory.
  -->
  
  <units name="millisecond">
    <unit prefix="milli" units="second"/>
  </units>
  
  <units name="per_millisecond">
    <unit exponent="-1" units="millisecond"/>
  </units>
  
  <units name="femtoA">
    <unit prefix="femto" units="ampere"/>
  </units>
  
  <units name="femtoF">
    <unit prefix="femto" units="farad"/>
  </units>
  
  <units name="millivolt">
    <unit prefix="milli" units="volt"/>
  </units>
  
  <units name="micromolar">
     <unit prefix="micro" units="mole"/>
     <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="flux">
     <unit units="micromolar"/>
     <unit exponent="-1" units="millisecond"/>
  </units>
  
  <units name="picoS">
    <unit prefix="pico" units="siemens"/>
  </units>
  
  <units name="micromolar_per_fA_ms">
     <unit units="micromolar"/>
     <unit exponent="-1" units="femtoA"/>
     <unit exponent="-1" units="millisecond"/>
  </units>
  
  <units name="coulomb_per_mole">
    <unit exponent="-1" units="coulomb"/>
    <unit units="mole"/>
  </units>
  
  <units name="microlitre">
    <unit prefix="micro" units="litre"/>
  </units>
  
  <!--
    The "environment" component is used to declare variables that are used by
    all or most of the other components, in this case just "time".
  -->
  <component name="environment">
    <variable name="time" public_interface="out" units="millisecond"/>
  </component>
  
  <component name="membrane">
    <variable initial_value="-65.0" name="V" public_interface="out" units="millivolt"/>
    
    <variable initial_value="5300.0" name="Cm" units="femtoF"/>
    
    <variable name="time" public_interface="in" units="millisecond"/>
    <variable cmeta:id="id_00001" name="i_Ca" public_interface="in" units="femtoA"/>
    <variable cmeta:id="id_00010" name="i_K" public_interface="in" units="femtoA"/>
    <variable cmeta:id="id_00021" name="i_KATP" public_interface="in" units="femtoA"/>
    <variable cmeta:id="id_00022" name="i_KCa" public_interface="in" units="femtoA"/>
    <variable cmeta:id="id_00027" name="i_Leak" public_interface="in" units="femtoA"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="membrane_voltage_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> V </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <ci> i_Ca </ci>
              <ci> i_K </ci>
              <ci> i_KATP </ci>
              <ci> i_KCa </ci>
              <ci> i_Leak </ci>
            </apply>
          </apply>
          <ci> Cm </ci>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="id_00002" name="calcium_current">
    <variable cmeta:id="id_00003" name="i_Ca" public_interface="out" units="femtoA"/>
    
    <variable cmeta:id="id_00004" initial_value="30.0" name="V_Ca" units="millivolt"/>
    <variable cmeta:id="id_00005" initial_value="1450.0" name="g_Ca" units="picoS"/>   
   
    <variable name="time" private_interface="out" public_interface="in" units="millisecond"/>
    <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
    
    <variable name="m_infinity" private_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_Ca_calculation">
        <eq/>
        <ci> i_Ca </ci>
        <apply>
          <times/>
          <ci> g_Ca </ci>
          <ci> m_infinity </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> V_Ca </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="id_00006" name="calcium_current_m_gate">
    <variable cmeta:id="id_00007" name="m_infinity" public_interface="out" units="dimensionless"/>
    
    <variable cmeta:id="id_00009" initial_value="-13.0" name="Vm" units="millivolt"/>
    <variable cmeta:id="id_00008" initial_value="8.0" name="Sm" units="millivolt"/>
    
    <variable name="V" public_interface="in" units="millivolt"/>
    <variable name="time" public_interface="in" units="millisecond"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
     <apply id="m_infinity_calculation">
        <eq/>
        <ci> m_infinity </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <ci> Vm </ci>
                  <ci> V </ci>
                </apply>
                <ci> Sm </ci>
              </apply>
            </apply>    
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="id_00011" name="rapidly_activating_K_current">
    <variable cmeta:id="id_00012" name="i_K" public_interface="out" units="femtoA"/>
    <variable cmeta:id="id_00013" initial_value="-70.0" name="V_K" public_interface="out" units="millivolt"/>
   
    <variable cmeta:id="id_00014" initial_value="2500.0" name="g_K" units="picoS"/>   
   
    <variable name="time" private_interface="out" public_interface="in" units="millisecond"/>
    <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
    
    <variable name="n" private_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_K_calculation">
        <eq/>
        <ci> i_K </ci>
        <apply>
          <times/>
          <ci> g_K </ci>
          <ci> n </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> V_K </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component> 
  
  <component cmeta:id="id_00015" name="rapidly_activating_K_current_n_gate">
    <variable cmeta:id="id_00016" initial_value="0.0001" name="n" public_interface="out" units="dimensionless"/>
    
    <variable cmeta:id="id_00017" name="n_infinity" units="dimensionless"/>
    <variable initial_value="10.8" name="tau_n" units="millisecond"/>
    <variable initial_value="-15.0" name="Vn" units="millivolt"/>
    <variable initial_value="5.6" name="Sn" units="millivolt"/>
    
    <variable name="V" public_interface="in" units="millivolt"/>
    <variable name="time" public_interface="in" units="second"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="n_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> n </ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> n_infinity </ci>
            <ci> n </ci>
          </apply>
          <ci> tau_n </ci>
        </apply>
      </apply>
      
      <apply id="n_infinity_calculation">
        <eq/>
        <ci> n_infinity </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <ci> Vn </ci>
                  <ci> V </ci>
                </apply>
                <ci> Sn </ci>
              </apply>
            </apply>    
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="id_00023" name="Ca_activated_K_current">
    <variable cmeta:id="id_00024" name="i_KCa" public_interface="out" units="femtoA"/>
    
    <variable cmeta:id="id_00025" initial_value="1200.0" name="g_KCa" units="picoS"/>   
    
    <variable name="V_K" public_interface="in" units="millivolt"/>
    <variable name="time" private_interface="out" public_interface="in" units="millisecond"/>
    <variable name="c_SS" private_interface="out" public_interface="in" units="micromolar"/>
    <variable name="V" public_interface="in" units="millivolt"/>
    
    <variable name="w" private_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Ca_activated_K_current_i_KCa_calculation">
        <eq/>
        <ci> i_KCa </ci>
        <apply>
          <times/>
          <ci> g_KCa </ci>
          <ci> w </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> V_K </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component> 
  
  <component cmeta:id="id_00026" name="Ca_activated_K_current_w_gate">
    <variable name="w" public_interface="out" units="dimensionless"/>
    
    <variable initial_value="0.7" name="Kd" units="micromolar"/>
    <variable initial_value="8.0" name="q" units="dimensionless"/>
    
    <variable name="c_SS" public_interface="in" units="micromolar"/>
    <variable name="time" public_interface="in" units="millisecond"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="w_calculation">
        <eq/>
        <ci> w </ci>
        <apply>
          <divide/>
          <apply>
            <power/>
            <ci> c_SS </ci>
            <ci> q </ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <power/>
              <ci> c_SS </ci>
              <ci> q </ci>
            </apply>
            <apply>
              <power/>
              <ci> Kd </ci>
              <ci> q </ci>
            </apply>    
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="id_00018" name="ATP_dependent_K_current">
    <variable cmeta:id="id_00019" name="i_KATP" public_interface="out" units="femtoA"/>
    
    <variable cmeta:id="id_00020" initial_value="63.0" name="g_KATP" units="picoS"/>   
    
    <variable name="V_K" public_interface="in" units="millivolt"/>
    <variable name="time" public_interface="in" units="millisecond"/>
    <variable name="V" public_interface="in" units="millivolt"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="ATP_dependent_K_current_i_KCa_calculation">
        <eq/>
        <ci> i_KATP </ci>
        <apply>
          <times/>
          <ci> g_KATP </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> V_K </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="id_00028" name="leak_current">
    <variable cmeta:id="id_00029" name="i_Leak" public_interface="out" units="femtoA"/>
    
    <variable cmeta:id="id_00030" initial_value="14.0" name="g_Leak" units="picoS"/>   
    <variable cmeta:id="id_00031" initial_value="-30.0" name="V_Leak" units="millivolt"/>
   
    <variable name="time" public_interface="in" units="millisecond"/>
    <variable name="V" public_interface="in" units="millivolt"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="i_Leak_calculation">
        <eq/>
        <ci> i_Leak </ci>
        <apply>
          <times/>
          <ci> g_Leak </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> V_Leak </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="id_00032" name="calcium_concentrations"> 
    <variable initial_value="0.027" name="c" public_interface="out" units="micromolar"/>
    <variable cmeta:id="id_00033" initial_value="111.17" name="c_ER" public_interface="out" units="micromolar"/>
    <variable initial_value="0.29" name="c_SS" public_interface="out" units="micromolar"/>
    
    <variable cmeta:id="id_00034" initial_value="0.01" name="f_CYT" units="dimensionless"/>
    <variable cmeta:id="id_00035" initial_value="0.005" name="f_ER" units="dimensionless"/>
    <variable initial_value="0.04" name="f_SS" units="dimensionless"/>
    <variable initial_value="4.5E-6" name="alpha" units="micromolar_per_fA_ms"/>
    <variable initial_value="96845.0" name="F" units="coulomb_per_mole"/>
    <variable cmeta:id="id_00037" name="V_CYT" units="microlitre"/>
    <variable cmeta:id="id_00036" name="V_ER" units="microlitre"/>
    <variable name="V_SS" units="microlitre"/>
    
    <variable name="time" public_interface="in" units="millisecond"/>
    <variable name="i_Ca" public_interface="in" units="femtoA"/>
    <variable cmeta:id="id_00039" name="J_PMCA" public_interface="in" units="flux"/>
    <variable cmeta:id="id_00044" name="J_SERCA" public_interface="in" units="flux"/>
    <variable name="J_RELEASE" public_interface="in" units="flux"/>
    <variable name="J_X" public_interface="in" units="flux"/>
          
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="c_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> c </ci>
        </apply>
        <apply>
          <times/>
          <ci> f_CYT </ci>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci> alpha </ci>
                  <ci> i_Ca </ci>
                </apply>
                <ci> J_PMCA </ci>
                <ci> J_SERCA </ci>
              </apply>
            </apply>
            <ci> J_X </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="alpha_calculation">
        <eq/>
        <ci> alpha </ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <times/>
            <cn cellml:units="dimensionless"> 2.0 </cn>
            <ci> F </ci>
            <ci> V_CYT </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="V_CYT_calculation1">
        <eq/>
        <ci> V_CYT </ci>
        <apply>
          <times/>
          <cn cellml:units="dimensionless"> 25.0 </cn>
          <ci> V_ER </ci>
        </apply>
      </apply>
      
      <apply id="V_SS_calculation">
        <eq/>
        <ci> V_SS </ci>
        <apply>
          <times/>
          <cn cellml:units="dimensionless"> 0.4 </cn>
          <ci> V_CYT </ci>
        </apply>
      </apply>
      
      <apply id="V_ER_calculation">
        <eq/>
        <ci> V_ER </ci>
        <apply>
          <times/>
          <cn cellml:units="dimensionless"> 0.1 </cn>
          <ci> V_SS </ci>
        </apply>
      </apply>
      
      <apply id="c_ER_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> c_ER </ci>
        </apply>
        <apply>
          <times/>
          <ci> f_ER </ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <apply>
                <divide/>
                <ci> V_CYT </ci>
                <ci> V_ER </ci>
              </apply>
              <ci> J_SERCA </ci>
            </apply>
            <ci> J_RELEASE </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="c_SS_dt">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> c_SS </ci>
        </apply>
        <apply>
          <times/>
          <ci> f_SS </ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <apply>
                <divide/>
                <ci> V_ER </ci>
                <ci> V_SS </ci>
              </apply>
              <ci> J_RELEASE </ci>
            </apply>
            <apply>
              <times/>
              <apply>
                <divide/>
                <ci> V_CYT </ci>
                <ci> V_SS </ci>
              </apply>
              <ci> J_X </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="id_00041" name="calcium_fluxes">
    <variable cmeta:id="id_00040" name="J_PMCA" public_interface="out" units="flux"/>
    <variable cmeta:id="id_00043" name="J_SERCA" public_interface="out" units="flux"/>
    <variable name="J_RELEASE" public_interface="out" units="flux"/>
    <variable name="J_X" public_interface="out" units="flux"/>
    
    <variable cmeta:id="id_00042" initial_value="0.18" name="k_PMCA" units="per_millisecond"/>
    <variable initial_value="0.1" name="k_SERCA" units="per_millisecond"/>
    <variable cmeta:id="id_00038" initial_value="0.0015" name="p_ER" units="per_millisecond"/> 
    <variable initial_value="0.025" name="p_X" units="per_millisecond"/>
    
    <variable name="c" public_interface="in" units="micromolar"/>
    <variable name="c_ER" public_interface="in" units="micromolar"/>
    <variable name="c_SS" public_interface="in" units="micromolar"/>
    <variable name="time" public_interface="in" units="millisecond"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="J_PMCA_calculation">
        <eq/>
        <ci> J_PMCA </ci>
        <apply>
          <times/>
          <ci> k_PMCA </ci>
          <ci> c </ci>
        </apply>
      </apply>
      
      <apply id="J_SERCA_calculation">
        <eq/>
        <ci> J_SERCA </ci>
        <apply>
          <times/>
          <ci> k_SERCA </ci>
          <ci> c </ci>
        </apply>
      </apply>
      
      <apply id="J_RELEASE_calculation">
        <eq/>
        <ci> J_RELEASE </ci>
        <apply>
          <times/>
          <ci> p_ER </ci>
          <apply>
            <minus/>
            <ci> c_ER </ci>
            <ci> c_SS </ci>
          </apply>
        </apply>
      </apply>
      
      <apply id="J_X_calculation">
        <eq/>
        <ci> J_X </ci>
        <apply>
          <times/>
          <ci> p_X </ci>
          <apply>
            <minus/>
            <ci> c_SS </ci>
            <ci> c </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <group>
    <relationship_ref relationship="containment"/>
    <component_ref component="membrane">
      <component_ref component="calcium_current">
        <component_ref component="calcium_current_m_gate"/>
      </component_ref>
      <component_ref component="rapidly_activating_K_current">
        <component_ref component="rapidly_activating_K_current_n_gate"/>
      </component_ref>
      <component_ref component="Ca_activated_K_current">
        <component_ref component="Ca_activated_K_current_w_gate"/>
      </component_ref>
      <component_ref component="ATP_dependent_K_current"/>
      <component_ref component="leak_current"/>
      <component_ref component="calcium_concentrations"/>
      <component_ref component="calcium_fluxes"/>
    </component_ref>
  </group>
  
  <group>
    <relationship_ref relationship="encapsulation"/>
    <component_ref component="calcium_current">
      <component_ref component="calcium_current_m_gate"/>
    </component_ref>
    <component_ref component="rapidly_activating_K_current">
      <component_ref component="rapidly_activating_K_current_n_gate"/>
    </component_ref>
    <component_ref component="Ca_activated_K_current">
      <component_ref component="Ca_activated_K_current_w_gate"/>
    </component_ref>
  </group>
  
  <connection>
    <map_components component_1="membrane" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>

  <connection>
    <map_components component_1="calcium_current" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="rapidly_activating_K_current" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="Ca_activated_K_current" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="ATP_dependent_K_current" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="leak_current" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="calcium_concentrations" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="calcium_fluxes" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="membrane" component_2="calcium_current"/>
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="i_Ca" variable_2="i_Ca"/>
  </connection> 
  
  <connection>
    <map_components component_1="membrane" component_2="rapidly_activating_K_current"/>
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="i_K" variable_2="i_K"/>
  </connection>
  
  <connection>
    <map_components component_1="membrane" component_2="Ca_activated_K_current"/>
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="i_KCa" variable_2="i_KCa"/>
  </connection> 
  
  <connection>
    <map_components component_1="membrane" component_2="ATP_dependent_K_current"/>
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="i_KATP" variable_2="i_KATP"/>
  </connection>
  
  <connection>
    <map_components component_1="membrane" component_2="leak_current"/>
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="i_Leak" variable_2="i_Leak"/>
  </connection>
  
  <connection>
    <map_components component_1="calcium_concentrations" component_2="Ca_activated_K_current"/>
    <map_variables variable_1="c_SS" variable_2="c_SS"/>
  </connection>
  
  <connection>
    <map_components component_1="rapidly_activating_K_current" component_2="Ca_activated_K_current"/>
    <map_variables variable_1="V_K" variable_2="V_K"/>
  </connection> 
  
  <connection>
    <map_components component_1="rapidly_activating_K_current" component_2="ATP_dependent_K_current"/>
    <map_variables variable_1="V_K" variable_2="V_K"/>
  </connection>
  
  <connection>
    <map_components component_1="calcium_concentrations" component_2="calcium_fluxes"/>
    <map_variables variable_1="c" variable_2="c"/>
    <map_variables variable_1="c_ER" variable_2="c_ER"/>
    <map_variables variable_1="c_SS" variable_2="c_SS"/>
    <map_variables variable_1="J_PMCA" variable_2="J_PMCA"/>
    <map_variables variable_1="J_SERCA" variable_2="J_SERCA"/>
    <map_variables variable_1="J_RELEASE" variable_2="J_RELEASE"/>
    <map_variables variable_1="J_X" variable_2="J_X"/>
  </connection>
  
  <connection>
    <map_components component_1="calcium_concentrations" component_2="calcium_current"/>
    <map_variables variable_1="i_Ca" variable_2="i_Ca"/>
  </connection>
  
  <connection>
    <map_components component_1="calcium_current" component_2="calcium_current_m_gate"/>
    <map_variables variable_1="m_infinity" variable_2="m_infinity"/>
    <map_variables variable_1="time" variable_2="time"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  
  <connection>
    <map_components component_1="rapidly_activating_K_current" component_2="rapidly_activating_K_current_n_gate"/>
    <map_variables variable_1="n" variable_2="n"/>
    <map_variables variable_1="time" variable_2="time"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection> 
  
  <connection>
    <map_components component_1="Ca_activated_K_current" component_2="Ca_activated_K_current_w_gate"/>
    <map_variables variable_1="w" variable_2="w"/>
    <map_variables variable_1="time" variable_2="time"/>
    <map_variables variable_1="c_SS" variable_2="c_SS"/>
  </connection>
  







<rdf:RDF><rdf:Description rdf:about="rdf:#3bfc0eff-adb1-4d53-bf5d-e60a2d929026"><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/></rdf:type><rdf:_1 xml:lang="en">calcium dynamics</rdf:_1><rdf:_2 xml:lang="en">electrophysiology</rdf:_2><rdf:_3 xml:lang="en">Pancreatic Beta-Cell</rdf:_3><rdf:_4 xml:lang="en">beta cell</rdf:_4></rdf:Description><rdf:Description rdf:about="rdf:#citationAuthorsSeq"><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/></rdf:type><rdf:_1><rdf:Description rdf:about="rdf:#author1Vcard"/></rdf:_1><rdf:_2><rdf:Description rdf:about="rdf:#author2Vcard"/></rdf:_2><rdf:_3><rdf:Description rdf:about="rdf:#author3Vcard"/></rdf:_3><rdf:_4><rdf:Description rdf:about="rdf:#author4Vcard"/></rdf:_4><rdf:_5><rdf:Description rdf:about="rdf:#author5Vcard"/></rdf:_5><rdf:_6><rdf:Description rdf:about="rdf:#author6Vcard"/></rdf:_6></rdf:Description><rdf:Description rdf:about="rdf:#author1Vcard"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><vCard:N><rdf:Description rdf:about="rdf:#author1VcardN"/></vCard:N></rdf:Description><rdf:Description rdf:about="rdf:#author2Vcard"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><vCard:N><rdf:Description rdf:about="rdf:#author2VcardN"/></vCard:N></rdf:Description><rdf:Description rdf:about="rdf:#author3Vcard"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><vCard:N><rdf:Description rdf:about="rdf:#author3VcardN"/></vCard:N></rdf:Description><rdf:Description rdf:about="rdf:#author4Vcard"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><vCard:N><rdf:Description rdf:about="rdf:#author4VcardN"/></vCard:N></rdf:Description><rdf:Description rdf:about="rdf:#author5Vcard"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><vCard:N><rdf:Description rdf:about="rdf:#author5VcardN"/></vCard:N></rdf:Description><rdf:Description rdf:about="rdf:#author6Vcard"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><vCard:N><rdf:Description rdf:about="rdf:#author6VcardN"/></vCard:N></rdf:Description><rdf:Description rdf:about="rdf:#de5d54eb-beb8-4e3c-b957-ede0382b031d"><bqs:Pubmed_id xml:lang="en">12198088</bqs:Pubmed_id><bqs:JournalArticle><rdf:Description rdf:about="rdf:#ff28abcf-d684-493d-93f3-f2e5f56f6f1e"/></bqs:JournalArticle></rdf:Description><rdf:Description rdf:about="rdf:#ff28abcf-d684-493d-93f3-f2e5f56f6f1e"><dc:title xml:lang="en">Calcium-activated K+ Channels of Mouse Beta Cells are Controlled by Both Store and Cytoplasmic Ca2+: Experimental and Theoretical Studies</dc:title><dc:creator><rdf:Description rdf:about="rdf:#citationAuthorsSeq"/></dc:creator><bqs:volume xml:lang="en">120</bqs:volume><bqs:first_page xml:lang="en">307</bqs:first_page><bqs:Journal><rdf:Description rdf:about="rdf:#c313b158-8fe3-4c64-966d-5e291afaef9e"/></bqs:Journal><dcterms:issued><rdf:Description rdf:about="rdf:#31d5f0dd-d351-4b79-8ddc-b4342dd8c583"/></dcterms:issued><bqs:last_page xml:lang="en">322</bqs:last_page></rdf:Description><rdf:Description rdf:about="rdf:#author5VcardN"><vCard:Given xml:lang="en">Arthur</vCard:Given><vCard:Family xml:lang="en">Sherman</vCard:Family></rdf:Description><rdf:Description rdf:about="#goforth_bertram_khan_zhang_sherman_satin_2002_version02"><dc:title xml:lang="en">
        Goforth et al's 2002 mathematical model of Ca2+-activated K+ channels in
        pancreatic beta cells.
      </dc:title>
<cmeta:bio_entity xml:lang="en">pancreatic beta-cell</cmeta:bio_entity>
<cmeta:comment>
<rdf:Description rdf:about="rdf:#91e14511-8bb0-4460-a3ec-059c7dec100b"/>
</cmeta:comment>
<bqs:reference>
<rdf:Description rdf:about="rdf:#de5d54eb-beb8-4e3c-b957-ede0382b031d"/>
</bqs:reference>
<bqs:reference>
<rdf:Description rdf:about="rdf:#57a2ceb0-572a-41c2-9d0e-21905998aa4c"/>
</bqs:reference>
</rdf:Description>
<rdf:Description rdf:about="rdf:#91e14511-8bb0-4460-a3ec-059c7dec100b">
<rdf:value xml:lang="en">This is the CellML description of Goforth et al's 2nd 2002 mathematical model of Ca2+-activated K+ channels in pancreatic beta cells. This model has a subspace between the ER and the plasma membrane.</rdf:value>
<dc:creator>
<rdf:Description rdf:about="rdf:#3cf5690d-caa4-4b95-90c8-4f60b3c959e2"/>
</dc:creator>
</rdf:Description>
<rdf:Description rdf:about="rdf:#57a2ceb0-572a-41c2-9d0e-21905998aa4c">
<dc:subject>
<rdf:Description rdf:about="rdf:#508b916b-7786-4459-a6b7-2eef86dc6243"/>
</dc:subject>
</rdf:Description>
<rdf:Description rdf:about="rdf:#author3VcardN">
<vCard:Given xml:lang="en">F</vCard:Given>
<vCard:Family xml:lang="en">Khan</vCard:Family>
<vCard:Other xml:lang="en">A</vCard:Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#author6VcardN">
<vCard:Given xml:lang="en">Leslie</vCard:Given>
<vCard:Family xml:lang="en">Satin</vCard:Family>
<vCard:Other xml:lang="en">S</vCard:Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#3cf5690d-caa4-4b95-90c8-4f60b3c959e2">
<vCard:FN xml:lang="en">Catherine Lloyd</vCard:FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#author4VcardN">
<vCard:Given xml:lang="en">M</vCard:Given>
<vCard:Family xml:lang="en">Zhang</vCard:Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#author2VcardN">
<vCard:Given xml:lang="en">R</vCard:Given>
<vCard:Family xml:lang="en">Bertram</vCard:Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#508b916b-7786-4459-a6b7-2eef86dc6243">
<rdf:value>
<rdf:Description rdf:about="rdf:#3bfc0eff-adb1-4d53-bf5d-e60a2d929026"/>
</rdf:value>
<bqs:subject_type xml:lang="en">keyword</bqs:subject_type>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c313b158-8fe3-4c64-966d-5e291afaef9e">
<dc:title xml:lang="en">Journal of General Physiology</dc:title>
</rdf:Description>
<rdf:Description rdf:about="rdf:#31d5f0dd-d351-4b79-8ddc-b4342dd8c583">
<dcterms:W3CDTF xml:lang="en">2002-09-01</dcterms:W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="rdf:#author1VcardN">
<vCard:Given xml:lang="en">P</vCard:Given>
<vCard:Family xml:lang="en">Goforth</vCard:Family>
<vCard:Other xml:lang="en">B</vCard:Other>
</rdf:Description>
<rdf:Description rdf:about="#id_00001">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00002">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00003">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00004">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00005">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00006">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00007">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00008">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00009">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00010">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00011">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00012">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00013">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00014">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00015">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00016">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00017">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00018">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008282"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00019">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008282"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00020">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008282"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00021">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008282"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00022">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015269"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00023">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015269"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00024">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015269"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00025">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015269"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00026">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015269"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00027">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00028">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00029">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00030">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00031">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00032">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00033">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/fma/FMA:63842"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00034">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005829"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00035">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/fma/FMA:63842"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00036">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/fma/FMA:63842"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00037">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005829"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00038">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/fma/FMA:63842"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00039">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070588"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015085"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0006816"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00040">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070588"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015085"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0006816"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00041">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070588"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015085"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0006816"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070296"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0051208"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00042">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070588"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015085"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0006816"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00043">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070296"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0051208"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00044">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070296"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0051208"/>
</isVersionOf>
</rdf:Description>
</rdf:RDF>
</model>