<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xml:base="file:///H:/bindschadler_sneyd_2001/bindschadler_sneyd_2001.cellml" cmeta:id="bindschadler_sneyd_2001" name="bindschadler_sneyd_2001">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>A Bifurcation Analysis of Two Coupled Calcium Oscillators</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This CellML model runs in both OpenCell and COR to produce an oscillating output similar to that from the original published model. The units have been checked and they are consistent.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: In many cell types, asynchronous or synchronous oscillations in the concentration of intracellular free calcium occur in adjacent cells that are coupled by gap junctions. Such oscillations are believed to underlie oscillatory intercellular calcium waves in some cell types, and thus it is important to understand how they occur and are modified by intercellular coupling. Using a previous model of intracellular calcium oscillations in pancreatic acinar cells, this article explores the effects of coupling two cells with a simple linear diffusion term. Depending on the concentration of a signal molecule, inositol (1,4,5)-trisphosphate, coupling two identical cells by diffusion can give rise to synchronized in-phase oscillations, as well as different-amplitude in-phase oscillations and same-amplitude antiphase oscillations. Coupling two nonidentical cells leads to more complex behaviors such as cascades of period doubling and multiply periodic solutions. This study is a first step towards understanding the role and significance of the diffusion of calcium through gap junctions in the coordination of oscillatory calcium waves in a variety of cell types.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
A bifurcation analysis of two coupled calcium oscillators, Michael Bindschadler and James Sneyd, 2001, <emphasis>CHAOS</emphasis>, 11, 237-246.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/12779457">PubMed ID: 12779457</ulink>
</para>

<informalfigure float="0" id="fig_cell_diagram">
          <mediaobject>
            <imageobject>
              <objectinfo>
                <title>cell diagram</title>
              </objectinfo>
              <imagedata fileref="bindschadler_2001.png"/>
            </imageobject>
            <caption>
Schematic diagram of the IP3 receptor model.  The receptor with its three possible states: X, Y, and Z; representing open, shut and inactive respectively, is embedded within a model of intracellular calcium dynamics.
</caption>
          </mediaobject>
        </informalfigure>

</sect1>
</article>
</documentation>

  <units name="per_second">
    <unit exponent="-1" units="second"/>
  </units>
  <units name="micro_molar">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="micro_molar_per_second">
    <unit units="micro_molar"/>
    <unit units="per_second"/>
  </units>
  <units name="second_order_rate">
    <unit exponent="-1" units="micro_molar"/>
    <unit units="per_second"/>
  </units>
  
  <component name="environment">
    <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
  </component>
  
  <component cmeta:id="h1" name="h1">
     
	<variable name="time" public_interface="in" units="second"/>
    <variable name="phi3_c1" public_interface="in" units="per_second"/>
    <variable cmeta:id="id_00001" initial_value="0.8" name="h1" public_interface="out" units="dimensionless"/>
    <variable name="phi1_c1" public_interface="in" units="second_order_rate"/>
    <variable name="phi2_c1" public_interface="in" units="per_second"/>
    <variable name="p" public_interface="in" units="micro_molar"/>
    <variable name="phi_1_c1" public_interface="in" units="per_second"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="d(h1)/d(time)">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>h1</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>phi3_c1</ci>
            <apply>
              <minus/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              <ci>h1</ci>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>phi1_c1</ci>
              <ci>phi2_c1</ci>
              <ci>h1</ci>
              <ci>p</ci>
            </apply>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci>phi1_c1</ci>
                <ci>p</ci>
              </apply>
              <ci>phi_1_c1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="h2" name="h2">
     
    <variable name="time" public_interface="in" units="second"/>
    <variable name="phi3_c2" public_interface="in" units="per_second"/>
    <variable cmeta:id="id_00002" initial_value="0.1" name="h2" public_interface="out" units="dimensionless"/>
    <variable name="phi1_c2" public_interface="in" units="second_order_rate"/>
    <variable name="phi2_c2" public_interface="in" units="per_second"/>
    <variable name="p" public_interface="in" units="micro_molar"/>
    <variable name="phi_1_c2" public_interface="in" units="per_second"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="d(h2)/d(time)">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>h2</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>phi3_c2</ci>
            <apply>
              <minus/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              <ci>h2</ci>
            </apply>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>phi1_c2</ci>
              <ci>phi2_c2</ci>
              <ci>h2</ci>
              <ci>p</ci>
            </apply>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci>phi1_c2</ci>
                <ci>p</ci>
              </apply>
              <ci>phi_1_c2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="phi" name="phi">
     
    <variable name="phi1_c1" public_interface="out" units="second_order_rate"/>
    <variable name="phi_1_c1" public_interface="out" units="per_second"/>
    <variable name="phi2_c1" public_interface="out" units="per_second"/>
    <variable name="phi3_c1" public_interface="out" units="per_second"/>
    <variable name="phi1_c2" public_interface="out" units="second_order_rate"/>
    <variable name="phi_1_c2" public_interface="out" units="per_second"/>
    <variable name="phi2_c2" public_interface="out" units="per_second"/>
    <variable name="phi3_c2" public_interface="out" units="per_second"/>
	<variable name="r2" public_interface="in" units="second_order_rate"/>
    <variable name="R1" public_interface="in" units="micro_molar"/>
    <variable name="k1" public_interface="in" units="micro_molar_per_second"/>
    <variable name="R3" public_interface="in" units="micro_molar"/>
    <variable name="k2" public_interface="in" units="micro_molar_per_second"/>
    <variable name="r4" public_interface="in" units="per_second"/>
    <variable name="k3" public_interface="in" units="micro_molar_per_second"/>
    <variable name="R5" public_interface="in" units="micro_molar"/>
    <variable name="c1" public_interface="in" units="micro_molar"/>
    <variable name="c2" public_interface="in" units="micro_molar"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>phi1_c1</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>r2</ci>
            <ci>c1</ci>
          </apply>
          <apply>
            <plus/>
            <ci>R1</ci>
            <ci>c1</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>phi_1_c1</ci>
        <apply>
          <divide/>
          <ci>k1</ci>
          <apply>
            <plus/>
            <ci>R3</ci>
            <ci>c1</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>phi2_c1</ci>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <ci>k2</ci>
            <apply>
              <times/>
              <ci>r4</ci>
              <ci>c1</ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <ci>R3</ci>
            <ci>c1</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>phi3_c1</ci>
        <apply>
          <divide/>
          <ci>k3</ci>
          <apply>
            <plus/>
            <ci>R5</ci>
            <ci>c1</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>phi1_c2</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>r2</ci>
            <ci>c2</ci>
          </apply>
          <apply>
            <plus/>
            <ci>R1</ci>
            <ci>c2</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>phi_1_c2</ci>
        <apply>
          <divide/>
          <ci>k1</ci>
          <apply>
            <plus/>
            <ci>R3</ci>
            <ci>c2</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>phi2_c2</ci>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <ci>k2</ci>
            <apply>
              <times/>
              <ci>r4</ci>
              <ci>c2</ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <ci>R3</ci>
            <ci>c2</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>phi3_c2</ci>
        <apply>
          <divide/>
          <ci>k3</ci>
          <apply>
            <plus/>
            <ci>R5</ci>
            <ci>c2</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="j_pump" name="j_pump">
     
    <variable name="Vp" public_interface="in" units="micro_molar_per_second"/>
    <variable name="c1" public_interface="in" units="micro_molar"/>
    <variable name="c2" public_interface="in" units="micro_molar"/>
    <variable name="Kp" public_interface="in" units="micro_molar"/>
    <variable cmeta:id="j_pump_j_pump_c1" name="j_pump_c1" public_interface="out" units="micro_molar_per_second"/>
    <variable cmeta:id="id_00003" name="j_pump_c2" public_interface="out" units="micro_molar_per_second"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="j_pump_c1">
      <apply>
        <eq/>
        <ci>j_pump_c1</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>Vp</ci>
            <apply>
              <power/>
              <ci>c1</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <power/>
              <ci>Kp</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>c1</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="j_pump_c2">
      <apply>
        <eq/>
        <ci>j_pump_c2</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>Vp</ci>
            <apply>
              <power/>
              <ci>c2</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <power/>
              <ci>Kp</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            </apply>
            <apply>
              <power/>
              <ci>c2</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="j_receptor" name="j_receptor">
     
    <variable name="kf" public_interface="in" units="micro_molar_per_second"/>
    <variable name="p" public_interface="in" units="micro_molar"/>
    <variable name="h1" public_interface="in" units="dimensionless"/>
    <variable name="phi1_c1" public_interface="in" units="second_order_rate"/>
    <variable name="phi1_c2" public_interface="in" units="second_order_rate"/>
    <variable name="phi_1_c1" public_interface="in" units="per_second"/>
    <variable name="phi_1_c2" public_interface="in" units="per_second"/>
    <variable cmeta:id="j_receptor_j_receptor_c1" name="j_receptor_c1" public_interface="out" units="micro_molar_per_second"/>
    <variable cmeta:id="id_00009" name="j_receptor_c2" public_interface="out" units="micro_molar_per_second"/>
	<variable name="h2" public_interface="in" units="dimensionless"/>
  
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="j_receptor_c1">
      <apply>
        <eq/>
        <ci>j_receptor_c1</ci>
        <apply>
          <times/>
          <ci>kf</ci>
          <apply>
            <power/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci>p</ci>
                <ci>h1</ci>
                <ci>phi1_c1</ci>
              </apply>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci>phi1_c1</ci>
                  <ci>p</ci>
                </apply>
                <ci>phi_1_c1</ci>
              </apply>
            </apply>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="j_receptor_c2">
      <apply>
        <eq/>
        <ci>j_receptor_c2</ci>
        <apply>
          <times/>
          <ci>kf</ci>
          <apply>
            <power/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <ci>p</ci>
                <ci>h2</ci>
                <ci>phi1_c2</ci>
              </apply>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci>phi1_c2</ci>
                  <ci>p</ci>
                </apply>
                <ci>phi_1_c2</ci>
              </apply>
            </apply>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="j_diffusion" name="j_diffusion">
     
    <variable name="j_diffusion" public_interface="out" units="micro_molar_per_second"/>
    <variable name="D" public_interface="in" units="per_second"/>
    <variable name="c1" public_interface="in" units="micro_molar"/>
    <variable name="c2" public_interface="in" units="micro_molar"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="j_diffusion">
      <apply>
        <eq/>
        <ci>j_diffusion</ci>
        <apply>
          <times/>
          <ci>D</ci>
          <apply>
            <minus/>
            <ci>c2</ci>
            <ci>c1</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="c1" name="c1">
     
    <variable cmeta:id="id_00004" initial_value="0.3" name="c1" public_interface="out" units="micro_molar"/>
    <variable cmeta:id="id_00006" name="j_receptor_c1" public_interface="in" units="micro_molar_per_second"/>
    <variable cmeta:id="id_00007" name="j_pump_c1" public_interface="in" units="micro_molar_per_second"/>
    <variable cmeta:id="id_00008" name="j_leak" public_interface="in" units="micro_molar_per_second"/>
    <variable name="j_diffusion" public_interface="in" units="micro_molar_per_second"/>
	<variable name="time" public_interface="in" units="second"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="d(c1)/d(time)">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>c1</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>j_receptor_c1</ci>
            <ci>j_pump_c1</ci>
          </apply>
          <ci>j_leak</ci>
          <ci>j_diffusion</ci>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="c2" name="c2">
     
    <variable cmeta:id="id_00005" initial_value="0.1" name="c2" public_interface="out" units="micro_molar"/>
    <variable cmeta:id="id_00007" name="j_receptor_c2" public_interface="in" units="micro_molar_per_second"/>
    <variable cmeta:id="id_00006" name="j_pump_c2" public_interface="in" units="micro_molar_per_second"/>
    <variable cmeta:id="id_00007" name="j_leak" public_interface="in" units="micro_molar_per_second"/>
    <variable name="j_diffusion" public_interface="in" units="micro_molar_per_second"/>
	<variable name="time" public_interface="in" units="second"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="d(c2)/d(time)">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>c2</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>j_receptor_c2</ci>
            <ci>j_pump_c2</ci>
          </apply>
          <ci>j_leak</ci>
          <ci>j_diffusion</ci>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="model_parameters">
    <variable initial_value="28" name="kf" public_interface="out" units="micro_molar_per_second"/>
    <variable initial_value="1.2" name="Vp" public_interface="out" units="micro_molar_per_second"/>
    <variable initial_value="1.6" name="R5" public_interface="out" units="micro_molar"/>
    <variable initial_value="50" name="R3" public_interface="out" units="micro_molar"/>
    <variable initial_value="100" name="r2" public_interface="out" units="second_order_rate"/>
    <variable initial_value="6" name="R1" public_interface="out" units="micro_molar"/>
    <variable cmeta:id="model_parameters_j_leak" initial_value="0.2" name="j_leak" public_interface="out" units="micro_molar_per_second"/>
    <variable initial_value="0.18" name="Kp" public_interface="out" units="micro_molar"/>
    <variable initial_value="26.5" name="k2" public_interface="out" units="micro_molar_per_second"/>
    <variable initial_value="44" name="k1" public_interface="out" units="micro_molar_per_second"/>
    <variable initial_value="20" name="r4" public_interface="out" units="per_second"/>
    <variable initial_value="1.6" name="k3" public_interface="out" units="micro_molar_per_second"/>
    <variable initial_value="0.2778" name="p" public_interface="out" units="micro_molar"/>
    <variable initial_value="0.01" name="D" public_interface="out" units="per_second"/>
  </component>
  
  <connection>
    <map_components component_1="environment" component_2="h1"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="phi" component_2="h1"/>
    <map_variables variable_1="phi1_c1" variable_2="phi1_c1"/>
    <map_variables variable_1="phi2_c1" variable_2="phi2_c1"/>
    <map_variables variable_1="phi3_c1" variable_2="phi3_c1"/>
    <map_variables variable_1="phi_1_c1" variable_2="phi_1_c1"/>
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="h1"/>
    <map_variables variable_1="p" variable_2="p"/>
  </connection>
  <connection>
    <map_variables variable_1="time" variable_2="time"/>
    <map_components component_1="environment" component_2="h2"/>
  </connection>
  <connection>
    <map_components component_1="phi" component_2="h2"/>
    <map_variables variable_1="phi1_c2" variable_2="phi1_c2"/>
    <map_variables variable_1="phi2_c2" variable_2="phi2_c2"/>
    <map_variables variable_1="phi3_c2" variable_2="phi3_c2"/>
    <map_variables variable_1="phi_1_c2" variable_2="phi_1_c2"/>
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="h2"/>
    <map_variables variable_1="p" variable_2="p"/>
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="phi"/>
    <map_variables variable_1="r2" variable_2="r2"/>
    <map_variables variable_1="R1" variable_2="R1"/>
    <map_variables variable_1="k1" variable_2="k1"/>
    <map_variables variable_1="R3" variable_2="R3"/>
    <map_variables variable_1="k2" variable_2="k2"/>
    <map_variables variable_1="r4" variable_2="r4"/>
    <map_variables variable_1="k3" variable_2="k3"/>
    <map_variables variable_1="R5" variable_2="R5"/>
  </connection>
  <connection>
    <map_components component_1="c1" component_2="phi"/>
    <map_variables variable_1="c1" variable_2="c1"/>
  </connection>
  <connection>
    <map_components component_1="c2" component_2="phi"/>
    <map_variables variable_1="c2" variable_2="c2"/>
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="j_pump"/>
    <map_variables variable_1="Vp" variable_2="Vp"/>
    <map_variables variable_1="Kp" variable_2="Kp"/>
  </connection>
  <connection>
    <map_components component_1="c1" component_2="j_pump"/>
    <map_variables variable_1="c1" variable_2="c1"/>
  <map_variables variable_1="j_pump_c1" variable_2="j_pump_c1"/>
  </connection>
  <connection>
    <map_components component_1="c2" component_2="j_pump"/>
    <map_variables variable_1="c2" variable_2="c2"/>
  <map_variables variable_1="j_pump_c2" variable_2="j_pump_c2"/>
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="j_receptor"/>
    <map_variables variable_1="kf" variable_2="kf"/>
    <map_variables variable_1="p" variable_2="p"/>
  </connection>
  <connection>
    <map_components component_1="h1" component_2="j_receptor"/>
    <map_variables variable_1="h1" variable_2="h1"/>
  </connection>
  <connection>
    <map_components component_1="h2" component_2="j_receptor"/>
    <map_variables variable_1="h2" variable_2="h2"/>
  </connection>
  <connection>
    <map_components component_1="phi" component_2="j_receptor"/>
    <map_variables variable_1="phi1_c1" variable_2="phi1_c1"/>
    <map_variables variable_1="phi_1_c1" variable_2="phi_1_c1"/>
    <map_variables variable_1="phi1_c2" variable_2="phi1_c2"/>
    <map_variables variable_1="phi_1_c2" variable_2="phi_1_c2"/>
  </connection>
  <connection>
    <map_components component_1="model_parameters" component_2="j_diffusion"/>
    <map_variables variable_1="D" variable_2="D"/>
  </connection>
  <connection>
    <map_components component_1="c1" component_2="j_diffusion"/>
    <map_variables variable_1="c1" variable_2="c1"/>
  <map_variables variable_1="j_diffusion" variable_2="j_diffusion"/>
  </connection>
  <connection>
    <map_components component_1="c2" component_2="j_diffusion"/>
    <map_variables variable_1="c2" variable_2="c2"/>
  <map_variables variable_1="j_diffusion" variable_2="j_diffusion"/>
  </connection>
  <connection>
    <map_components component_1="j_receptor" component_2="c1"/>
    <map_variables variable_1="j_receptor_c1" variable_2="j_receptor_c1"/>
  </connection>
  
  <connection>
    <map_components component_1="model_parameters" component_2="c1"/>
    <map_variables variable_1="j_leak" variable_2="j_leak"/>
  </connection>
  
  <connection>
    <map_components component_1="j_receptor" component_2="c2"/>
    <map_variables variable_1="j_receptor_c2" variable_2="j_receptor_c2"/>
  </connection>
  
  <connection>
    <map_components component_1="model_parameters" component_2="c2"/>
    <map_variables variable_1="j_leak" variable_2="j_leak"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="c2"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="c1"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>



<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:about="#h1">
<title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">h1</title>
<alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">receptor concentration in cell 1</alternative>
</rdf:Description>
<rdf:Description rdf:about="#h2">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0004872"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/cl/CL:0000197"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0043235"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00001">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0004872"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/cl/CL:0000197"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0043235"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00002">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0004872"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/cl/CL:0000197"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0043235"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#j_pump">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0006816"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070588"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0060401"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015085"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#j_pump_j_pump_c1">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0006816"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070588"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015085"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00003">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0006816"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0070588"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0060401"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015085"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#c2">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#c1">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00004">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00005">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00008">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00006">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005220"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00007">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005220"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#j_receptor">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005220"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#j_receptor_j_receptor_c1">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005220"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00009">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005220"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#model_parameters_j_leak">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
</rdf:RDF>
</model>