<?xml version="1.0"?>

<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="nazaret_2009" cmeta:id="nazaret_2009" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">


<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Mitochondrial energetic metabolism: a simplified model of TCA cycle with ATP production</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This CellML runs in both OpenCell and COR. It is the scaled version of the model, taken from equations 29-39 in the original paper. Unfortunately the CellMl model does not recreate the published results and it requires further curation.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Mitochondria play a central role in cellular energetic metabolism. The essential parts of this metabolism are the tricarboxylic acid (TCA) cycle, the respiratory chain and the adenosine triphosphate (ATP) synthesis machinery. Here a simplified model of these three metabolic components with a limited set of differential equations is presented. The existence of a steady state is demonstrated and results of numerical simulations are presented. The relevance of a simple model to represent actual in vivo behavior is discussed.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Mitochondrial energetic metabolism: a simplified model of TCA cycle with ATP production, Nazaret C, Heiske M, Thurley K, and Mazat JP, 2009, <emphasis>Journal of Theoretical Biology</emphasis>, 258, 455-464.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/19007794">PubMed ID: 19007794</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction diagram</title>
    </objectinfo>
    <imagedata fileref="nazaret_2009.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  <units name="molar">
    <unit units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="micromolar">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="millimolar">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="millivolt">
    <unit prefix="milli" units="volt"/>
  </units>
  
  <units name="per_millivolt">
    <unit exponent="-1" units="millivolt"/>
  </units>
  
  <units name="per_micromolar">
    <unit exponent="-1" units="micromolar"/>
  </units>
  
  <units name="per_millimolar">
    <unit exponent="-1" units="millimolar"/>
  </units>
  
  <units name="molar_per_millivolt_per_second">
    <unit units="molar"/>
	<unit exponent="-1" units="millivolt"/>
	<unit exponent="-1" units="second"/>
  </units>
  
  <units name="millimolar_per_millivolt">
    <unit units="millimolar"/>
	<unit exponent="-1" units="millivolt"/>
  </units>
  
  <units name="micromolar_per_second">
    <unit units="micromolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  
  <units name="millimolar_per_second">
    <unit units="millimolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit exponent="-1" units="second"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit exponent="-1" units="second"/>
	<unit exponent="-1" units="molar"/>
  </units>
  
  <units name="third_order_rate_constant">
    <unit exponent="-1" units="second"/>
	<unit exponent="-2" units="molar"/>
  </units>
  
  <units name="joule_per_mole_kelvin">
    <unit units="joule"/>
	<unit exponent="-1" units="mole"/>
	<unit exponent="-1" units="kelvin"/>
  </units>
  
  <units name="joule_per_mole">
    <unit units="joule"/>
	<unit exponent="-1" units="mole"/>
  </units>
  
  <units name="coulomb_per_mole">
    <unit units="coulomb"/>
	<unit exponent="-1" units="mole"/>
  </units>
  
  
  <component name="environment">
    <variable name="time" public_interface="out" units="second"/>
  </component>
 
  <component cmeta:id="p" name="p">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#p">
        <dc:title>p</dc:title>
		<dcterms:alternative>Pyr</dcterms:alternative>  
        <dcterms:alternative>pyruvate</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="p_p" initial_value="0.154" name="p" public_interface="out" units="dimensionless"/> 
    <variable name="v1" public_interface="in" units="dimensionless"/>
    <variable name="v2" public_interface="in" units="dimensionless"/>
	<variable name="v7" public_interface="in" units="dimensionless"/>
    <variable name="tau" public_interface="in" units="dimensionless"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="1"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> tau </ci>
          </bvar> 
          <ci> p </ci> 
        </apply>
        <apply>
          <minus/> 
          <ci> v1 </ci>
          <apply>
            <plus/> 
            <ci> v2 </ci>
			<ci> v7 </ci>
		  </apply>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="a" name="a">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#a">
        <dc:title>a</dc:title>
        <dcterms:alternative>AcCoA</dcterms:alternative> 
		<dcterms:alternative>acetyl CoA</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="a_a" initial_value="0.063" name="a" public_interface="out" units="dimensionless"/> 
    <variable name="v2" public_interface="in" units="dimensionless"/>
    <variable name="v3" public_interface="in" units="dimensionless"/>
	<variable name="epsilon1" public_interface="in" units="dimensionless"/>
	<variable name="tau" public_interface="in" units="dimensionless"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="2"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> tau </ci>
          </bvar> 
          <ci> a </ci> 
        </apply>
        <apply>
          <divide/> 
		  <apply>
            <minus/> 
            <ci> v2 </ci>
            <ci> v3 </ci>
		  </apply> 
		  <ci> epsilon1 </ci>
		</apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="c" name="c">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#c">
        <dc:title>c</dc:title>
		<dcterms:alternative>Cit</dcterms:alternative>
        <dcterms:alternative>citrate</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="c_c" initial_value="0.44" name="c" public_interface="out" units="dimensionless"/> 
    <variable name="v3" public_interface="in" units="dimensionless"/>
    <variable name="v4" public_interface="in" units="dimensionless"/>
	<variable name="epsilon2" public_interface="in" units="dimensionless"/>
	<variable name="tau" public_interface="in" units="dimensionless"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="3"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> tau </ci>
          </bvar> 
          <ci> c </ci> 
        </apply>
        <apply>
          <divide/> 
		  <apply>
            <minus/> 
            <ci> v3 </ci>
            <ci> v4 </ci>
		  </apply>
          <ci> epsilon2 </ci> 
		</apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="k" name="k">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#k">
        <dc:title>k</dc:title>
        <dcterms:alternative>KG</dcterms:alternative> 
		<dcterms:alternative>alpha-ketoglutarate</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="k_k" initial_value="0.225" name="k" public_interface="out" units="dimensionless"/> 
    <variable name="v4" public_interface="in" units="dimensionless"/>
    <variable name="v5" public_interface="in" units="dimensionless"/>
	<variable name="v6" public_interface="in" units="dimensionless"/>
    <variable name="epsilon3" public_interface="in" units="dimensionless"/>
	<variable name="tau" public_interface="in" units="dimensionless"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="4"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> tau </ci>
          </bvar> 
          <ci> k </ci> 
        </apply>
        <apply>
          <divide/> 
		  <apply>
            <minus/> 
            <apply>
              <plus/> 
              <ci> v4 </ci>
			  <ci> v6 </ci>
		    </apply>
		    <ci> v5 </ci>
          </apply> 
		  <ci> epsilon3 </ci>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="o" name="o">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#o">
        <dc:title>o</dc:title>
		<dcterms:alternative>OAA</dcterms:alternative>  
        <dcterms:alternative>oxaloacetate</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="o_o" initial_value="0.005" name="o" public_interface="out" units="dimensionless"/> 
    <variable name="v3" public_interface="in" units="dimensionless"/>
    <variable name="v5" public_interface="in" units="dimensionless"/>
	<variable name="v6" public_interface="in" units="dimensionless"/>
	<variable name="v7" public_interface="in" units="dimensionless"/>
	<variable name="v8" public_interface="in" units="dimensionless"/>
    <variable name="epsilon4" public_interface="in" units="dimensionless"/>
	<variable name="tau" public_interface="in" units="dimensionless"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="5"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> tau </ci>
          </bvar> 
          <ci> o </ci> 
        </apply>
        <apply>
          <divide/>
		  <apply>
            <minus/> 
            <apply>
              <plus/> 
              <ci> v5 </ci>
			  <ci> v7 </ci>
		    </apply>
		    <apply>
              <plus/> 
              <ci> v3 </ci>
			  <ci> v8 </ci>
			  <ci> v6 </ci>
			</apply>
		  </apply>
		  <ci> epsilon4 </ci>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="n" name="n">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#n">
        <dc:title>n</dc:title>
        <dcterms:alternative>NAD</dcterms:alternative>
		<dcterms:alternative>nicotinamide adenine dinucleotide</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="n_n" initial_value="0.856" name="n" public_interface="out" units="dimensionless"/> 
    <variable name="v2" public_interface="in" units="dimensionless"/>
    <variable name="v4" public_interface="in" units="dimensionless"/>
	<variable name="v5" public_interface="in" units="dimensionless"/>
	<variable name="vresp" public_interface="in" units="dimensionless"/>
	<variable name="epsilon5" public_interface="in" units="dimensionless"/>
	<variable name="tau" public_interface="in" units="dimensionless"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="6"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> tau </ci>
          </bvar> 
          <ci> n </ci> 
        </apply>
        <apply>
          <divide/>
		  <apply>
            <minus/> 
            <ci> vresp </ci>
		    <apply>
              <plus/> 
              <ci> v2 </ci>
			  <ci> v4 </ci>
		      <apply>
                <times/> 
                <cn cellml:units="dimensionless"> 2.0 </cn>
			    <ci> v5 </ci>
			  </apply>
			</apply>
		  </apply>
		  <ci> epsilon5 </ci>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="en" name="en">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#en">
        <dc:title>en</dc:title>
		<dcterms:alternative>ATP</dcterms:alternative>
        <dcterms:alternative>adenosine triphospahte</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="en_en" initial_value="3.536" name="en" public_interface="out" units="dimensionless"/> 
    <variable name="vATP" public_interface="in" units="dimensionless"/>
    <variable name="vANT" public_interface="in" units="dimensionless"/>
	<variable name="v5" public_interface="in" units="dimensionless"/>
	<variable name="v7" public_interface="in" units="dimensionless"/>
	<variable name="epsilon6" public_interface="in" units="dimensionless"/>
	<variable name="tau" public_interface="in" units="dimensionless"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="7"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> tau </ci>
          </bvar> 
          <ci> en </ci> 
        </apply>
        <apply>
          <divide/>
		  <apply>
            <minus/> 
            <apply>
              <plus/> 
              <ci> vATP </ci>
			  <ci> v5 </ci>
		    </apply>
		    <apply>
              <plus/> 
              <ci> vANT </ci>
			  <ci> v7 </ci>
			</apply>
		  </apply>
		  <ci> epsilon6 </ci>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component cmeta:id="s" name="s">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" >
      <rdf:Description rdf:about="#s">
        <dc:title>s</dc:title>
        <dcterms:alternative>membrane potential</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF> 
    <variable cmeta:id="s_s" initial_value="150.0" name="s" public_interface="out" units="dimensionless"/> 

	<variable name="vresp" public_interface="in" units="dimensionless"/>
    <variable name="vANT" public_interface="in" units="dimensionless"/>
	<variable name="vleak" public_interface="in" units="dimensionless"/>
	<variable name="vATP" public_interface="in" units="dimensionless"/>
	<variable name="epsilon7" public_interface="in" units="dimensionless"/>
	<variable name="tau" public_interface="in" units="dimensionless"/> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="8"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci> tau </ci>
          </bvar> 
          <ci> s </ci> 
        </apply>
        <apply>
          <divide/> 
          <apply>
            <minus/> 
            <apply>
              <times/>
			  <cn cellml:units="dimensionless"> 10 </cn>
			  <ci> vresp </ci>
			</apply>
			<apply>
              <plus/> 
              <apply>
                <times/>
			    <cn cellml:units="dimensionless"> 3 </cn>
			    <ci> vATP </ci>
			  </apply>
			  <ci> vleak </ci>
			  <ci> vANT </ci>
		    </apply>
		  </apply>
		  <ci> epsilon7 </ci>
        </apply> 
      </apply> 
    </math> 
  </component>
  
  <component name="v1">
    <variable cmeta:id="v1_v1" name="v1" public_interface="out" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="9">
      <apply id="v1_calculation"><eq/>
        <ci> v1 </ci>
        <cn cellml:units="dimensionless"> 1 </cn>
      </apply>
    </math>
  </component>
  
  <component name="v2">
    <variable cmeta:id="v2_v2" name="v2" public_interface="out" units="dimensionless"/>
    
    <variable name="beta2" public_interface="in" units="dimensionless"/>
    <variable name="p" public_interface="in" units="dimensionless"/>
    <variable name="n" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="10">
      <apply id="v2_calculation"><eq/>
        <ci> v2 </ci>
        <apply>
		  <times/>
          <ci> beta2 </ci>
		  <ci> p </ci>
          <ci> n </ci>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v3">
    <variable cmeta:id="v3_v3" name="v3" public_interface="out" units="dimensionless"/>
    
    <variable name="beta3" public_interface="in" units="dimensionless"/>
    <variable name="o" public_interface="in" units="dimensionless"/>
    <variable name="a" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="11">
      <apply id="v3_calculation"><eq/>
        <ci> v3 </ci>
        <apply>
		  <times/>
          <ci> beta3 </ci>
		  <ci> o </ci>
          <ci> a </ci>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v4">
    <variable cmeta:id="v4_v4" name="v4" public_interface="out" units="dimensionless"/>
    
    <variable name="beta4" public_interface="in" units="dimensionless"/>
    <variable name="c" public_interface="in" units="dimensionless"/>
    <variable name="n" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="12">
      <apply id="v4_calculation"><eq/>
        <ci> v4 </ci>
        <apply>
		  <times/>
          <ci> beta4 </ci>
		  <ci> c </ci>
          <ci> n </ci>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v5">
    <variable cmeta:id="v5_v5" name="v5" public_interface="out" units="dimensionless"/>
    
    <variable name="beta5" public_interface="in" units="dimensionless"/>
    <variable name="en" public_interface="in" units="dimensionless"/>
	<variable name="k" public_interface="in" units="dimensionless"/>
    <variable name="n" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="13">
      <apply id="v5_calculation"><eq/>
        <ci> v5 </ci>
        <apply>
		  <times/>
          <ci> beta5 </ci>
		  <ci> k </ci>
          <ci> n </ci>
		  <apply>
		    <minus/>
            <cn cellml:units="dimensionless"> 1 </cn>
		    <ci> en </ci>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v6">
    <variable cmeta:id="v6_v6" name="v6" public_interface="out" units="dimensionless"/>
    
    <variable name="delta_6" public_interface="in" units="dimensionless"/>
    <variable name="beta6" public_interface="in" units="dimensionless"/>
    <variable name="o" public_interface="in" units="dimensionless"/>
    <variable name="k" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="14">
      <apply id="v6_calculation"><eq/>
        <ci> v6 </ci>
        <apply>
		  <times/>
          <ci> beta6 </ci>
		  <apply>
		    <minus/>
            <ci> o </ci>
		    <apply>
		      <times/>
              <ci> delta_6 </ci>
			  <ci> k </ci>
			</apply>
		  </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="v7">
    <variable cmeta:id="v7_v7" name="v7" public_interface="out" units="dimensionless"/>
    
    <variable name="beta7" public_interface="in" units="dimensionless"/>
    <variable name="p" public_interface="in" units="dimensionless"/>
    <variable name="en" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="15">
      <apply id="v7_calculation"><eq/>
        <ci> v7 </ci>
        <apply>
		  <times/>
          <ci> beta7 </ci>
		  <ci> p </ci>
		  <ci> en </ci>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="v8">
    <variable cmeta:id="v8_v8" name="v8" public_interface="out" units="dimensionless"/>
    
    <variable name="beta8" public_interface="in" units="dimensionless"/>
	<variable name="o" public_interface="in" units="dimensionless"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="16">
      <apply id="v8_calculation"><eq/>
        <ci> v8 </ci>
        <apply>
		  <times/>
          <ci> beta8 </ci>
		  <ci> o </ci>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="vANT">
    <variable cmeta:id="vANT_vANT" name="vANT" public_interface="out" units="dimensionless"/>
    
    <variable name="beta_ANT" public_interface="in" units="dimensionless"/>
    <variable name="en" public_interface="in" units="dimensionless"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="17">
      <apply id="vANT_calculation"><eq/>
        <ci> vANT </ci>
        <apply>
		  <times/>
          <ci> beta_ANT </ci>
		  <ci> en </ci>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="vleak">
    <variable cmeta:id="vleak_vleak" name="vleak" public_interface="out" units="dimensionless"/>
    
    <variable name="beta_leak" public_interface="in" units="dimensionless"/>
    <variable name="s" public_interface="in" units="dimensionless"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="18">
      <apply id="vleak_calculation"><eq/>
        <ci> vleak </ci>
        <apply>
		  <times/>
          <ci> beta_leak </ci>
		  <ci> s </ci>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="vresp">
    <variable cmeta:id="vresp_vresp" name="vresp" public_interface="out" units="dimensionless"/>
    
    <variable name="beta_resp" public_interface="in" units="dimensionless"/>
	<variable name="delta_r1" public_interface="in" units="dimensionless"/>
	<variable name="delta_r2" public_interface="in" units="dimensionless"/>
    <variable name="s" public_interface="in" units="dimensionless"/>
	<variable name="n" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="19">
      <apply id="vresp_calculation"><eq/>
        <ci> vresp </ci>
        <apply>
		  <times/>
          <ci> beta_resp </ci>
		  <apply>
		    <divide/>
			<apply>
		      <minus/>
			  <cn cellml:units="dimensionless"> 1 </cn>
			  <ci> n </ci>
		    </apply>
			<apply>
		      <minus/>
			  <apply>
		        <plus/>
				<ci> delta_r1 </ci>
			    <cn cellml:units="dimensionless"> 1 </cn>
		      </apply>
			  <ci> n </ci>
		    </apply>
		  </apply>
		  <apply>
		    <divide/>
			<cn cellml:units="dimensionless"> 1 </cn>
			<apply>
		      <plus/>
			  <cn cellml:units="dimensionless"> 1 </cn>
			  <apply>
		        <exp/>
		        <apply>
		          <times/>
			      <ci> delta_r2 </ci>
				  <apply>
		            <minus/>
				    <ci> s </ci>
			        <cn cellml:units="dimensionless"> 1 </cn>
				  </apply>
		        </apply>
			  </apply>
			</apply>
		  </apply>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="vATP">
    <variable cmeta:id="vATP_vATP" name="vATP" public_interface="out" units="dimensionless"/>
    
    <variable name="beta_ATP" public_interface="in" units="dimensionless"/>
	<variable name="delta_atp" public_interface="in" units="dimensionless"/>
	<variable name="en" public_interface="in" units="dimensionless"/>
	<variable name="en_crit" public_interface="in" units="dimensionless"/>
	<variable name="s" public_interface="in" units="dimensionless"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="20">
      <apply id="vATP_calculation"><eq/>
        <ci> vATP </ci>
        <apply>
		  <times/>
          <ci> beta_ATP </ci>
		  <apply>
		    <minus/>
			<apply>
		      <divide/>
			  <cn cellml:units="dimensionless"> 2 </cn>
			  <apply>
		        <plus/>
			    <cn cellml:units="dimensionless"> 1 </cn>
			    <apply>
		          <exp/>
		          <apply>
		            <times/>
			        <ci> delta_atp </ci>
				    <apply>
		              <minus/>
				      <ci> en </ci>
			          <apply>
		                <times/>
						<ci> en_crit </ci>
						<ci> s </ci>
					  </apply>
					</apply>
				  </apply>
				</apply>
			  </apply>
			</apply>
			<cn cellml:units="dimensionless"> 1 </cn>
		  </apply>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="en_crit">
    <variable cmeta:id="en_crit_en_crit" name="en_crit" public_interface="out" units="dimensionless"/>
    
	<variable name="Kapp_dash" public_interface="in" units="dimensionless"/>
	<variable name="delta_crit" public_interface="in" units="dimensionless"/>
    <variable name="s" public_interface="in" units="dimensionless"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="21">
      <apply id="en_crit_calculation"><eq/>
        <ci> en_crit </ci>
        <apply>
		  <divide/>
          <ci> Kapp_dash </ci>
		  <apply>
		    <plus/>
			<ci> Kapp_dash </ci>
			<apply>
		      <exp/>
			  <apply>
		        <times/>
			    <cn cellml:units="dimensionless"> -1 </cn>
			    <ci> delta_crit </ci>
				<ci> s </ci>
		      </apply>
			</apply>
		  </apply>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="normalised_constants">
    <variable name="beta2" public_interface="out" units="dimensionless"/>
	<variable name="beta3" public_interface="out" units="dimensionless"/>
	<variable name="beta4" public_interface="out" units="dimensionless"/>
	<variable name="beta5" public_interface="out" units="dimensionless"/>
	<variable name="beta6" public_interface="out" units="dimensionless"/>
	<variable name="beta7" public_interface="out" units="dimensionless"/>
	<variable name="beta8" public_interface="out" units="dimensionless"/>
	<variable name="epsilon1" public_interface="out" units="dimensionless"/>
	<variable name="epsilon2" public_interface="out" units="dimensionless"/>
	<variable name="epsilon3" public_interface="out" units="dimensionless"/>
	<variable name="epsilon4" public_interface="out" units="dimensionless"/>
	<variable name="epsilon5" public_interface="out" units="dimensionless"/>
	<variable name="epsilon6" public_interface="out" units="dimensionless"/>
	<variable name="epsilon7" public_interface="out" units="dimensionless"/>
	<variable name="beta_ANT" public_interface="out" units="dimensionless"/>
	<variable name="beta_leak" public_interface="out" units="dimensionless"/>
	<variable name="beta_resp" public_interface="out" units="dimensionless"/>
	<variable name="beta_ATP" public_interface="out" units="dimensionless"/>
	<variable name="delta_6" public_interface="out" units="dimensionless"/>
	<variable name="delta_r1" public_interface="out" units="dimensionless"/>
	<variable name="delta_r2" public_interface="out" units="dimensionless"/>
	<variable name="delta_atp" public_interface="out" units="dimensionless"/>
	<variable name="delta_crit" public_interface="out" units="dimensionless"/>
	<variable name="Kapp_dash" public_interface="out" units="dimensionless"/>
	<variable name="tau" public_interface="out" units="dimensionless"/>
    
    <variable name="At" initial_value="4.160" units="millimolar"/>
	<variable name="Nt" initial_value="1.070" units="millimolar"/>
    <variable initial_value="0.161" name="Pyr_bar" units="dimensionless"/>
	<variable initial_value="0.460" name="Cit_bar" units="dimensionless"/>
	<variable initial_value="0.105" name="AcCoA_bar" units="dimensionless"/>
	<variable initial_value="0.146" name="KG_bar" units="dimensionless"/>
	<variable initial_value="0.004" name="OAA_bar" units="dimensionless"/>
	<variable initial_value="38" name="k1" units="micromolar_per_second"/>
	<variable initial_value="152" name="k2" units="second_order_rate_constant"/>
	<variable initial_value="57142" name="k3" units="second_order_rate_constant"/>
	<variable initial_value="53" name="k4" units="second_order_rate_constant"/>
	<variable initial_value="40" name="k5" units="third_order_rate_constant"/>
	<variable initial_value="82361" name="k6" units="first_order_rate_constant"/>
	<variable initial_value="3.2e-3" name="k7" units="second_order_rate_constant"/>
	<variable initial_value="3.6" name="k8" units="first_order_rate_constant"/>
	<variable initial_value="2.5" name="kresp" units="millimolar_per_second"/>
	<variable initial_value="131.9" name="kATP" units="millimolar_per_second"/>
	<variable initial_value="0.1" name="kANT" units="dimensionless"/>
	<variable initial_value="0.426" name="kleak" units="molar_per_millivolt_per_second"/>
	<variable initial_value="0.3975" name="Keq" units="dimensionless"/>
	<variable initial_value="2" name="K" units="millimolar"/>
	<variable initial_value="0.100" name="alpha" units="per_millivolt"/>
	<variable initial_value="0.004" name="b" units="per_millimolar"/>
	<variable initial_value="150.0" name="delta_psi_m" units="millivolt"/>
	<variable initial_value="8.314" name="R" units="joule_per_mole_kelvin"/>
	<variable initial_value="298" name="T" units="kelvin"/>
	<variable initial_value="96485" name="F" units="coulomb_per_mole"/>
	<variable initial_value="6.75e-06" name="C" units="millimolar_per_millivolt"/>
	<variable initial_value="4.4e-6" name="Kapp" units="per_millimolar"/>
	<variable initial_value="2.440" name="Pi" units="millimolar"/>
	
    <variable name="p" public_interface="in" units="dimensionless"/>
	<variable name="a" public_interface="in" units="dimensionless"/>
	<variable name="c" public_interface="in" units="dimensionless"/>
	<variable name="k" public_interface="in" units="dimensionless"/>
	<variable name="o" public_interface="in" units="dimensionless"/>
	<variable name="n" public_interface="in" units="dimensionless"/>
	<variable name="en" public_interface="in" units="dimensionless"/>
	<variable name="s" public_interface="in" units="dimensionless"/>
	<variable name="time" public_interface="in" units="second"/>
	
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="22">
      <apply><eq/>
        <ci> beta2 </ci>
        <apply>
		  <times/>
		  <apply>
		    <divide/>
            <ci> k2 </ci>
		    <ci> k1 </ci>
	      </apply>
		  <ci> Nt </ci>
		  <ci> Pyr_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="23">
      <apply><eq/>
        <ci> beta3 </ci>
        <apply>
		  <times/>
		  <apply>
		    <divide/>
            <ci> k3 </ci>
		    <ci> k1 </ci>
	      </apply>
		  <ci> OAA_bar </ci>
		  <ci> AcCoA_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="24">
      <apply><eq/>
        <ci> beta4 </ci>
        <apply>
		  <times/>
		  <apply>
		    <divide/>
            <ci> k4 </ci>
		    <ci> k1 </ci>
	      </apply>
		  <ci> Nt </ci>
		  <ci> Cit_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="25">
      <apply><eq/>
        <ci> beta5 </ci>
        <apply>
		  <times/>
		  <apply>
		    <divide/>
            <ci> k5 </ci>
		    <ci> k1 </ci>
	      </apply>
		  <ci> Nt </ci>
		  <ci> At </ci>
		  <ci> KG_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="26">
      <apply><eq/>
        <ci> beta6 </ci>
        <apply>
		  <times/>
		  <apply>
		    <divide/>
            <ci> k6 </ci>
		    <ci> k1 </ci>
	      </apply>
		  <ci> OAA_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="27">
      <apply><eq/>
        <ci> beta7 </ci>
        <apply>
		  <times/>
		  <apply>
		    <divide/>
            <ci> k7 </ci>
		    <ci> k1 </ci>
	      </apply>
		  <ci> At </ci>
		  <ci> Pyr_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="28">
      <apply><eq/>
        <ci> beta8 </ci>
        <apply>
		  <times/>
		  <apply>
		    <divide/>
            <ci> k8 </ci>
		    <ci> k1 </ci>
	      </apply>
		  <ci> OAA_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="29">
      <apply><eq/>
        <ci> beta_ANT </ci>
        <apply>
		  <times/>
		  <apply>
		    <divide/>
            <ci> kANT </ci>
		    <ci> k1 </ci>
	      </apply>
		  <ci> At </ci>
		</apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="30">
      <apply><eq/>
        <ci> beta_leak </ci>
        <apply>
		  <times/>
		  <apply>
		    <divide/>
            <ci> kleak </ci>
		    <ci> k1 </ci>
	      </apply>
		  <ci> delta_psi_m </ci>
		</apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="31">
      <apply><eq/>
        <ci> beta_resp </ci>
        <apply>
		  <divide/>
          <ci> kresp </ci>
		  <ci> k1 </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="32">
      <apply><eq/>
        <ci> beta_ATP </ci>
        <apply>
		  <divide/>
          <ci> kATP </ci>
		  <ci> k1 </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="33">
      <apply><eq/>
        <ci> delta_6 </ci>
        <apply>
		  <divide/>
          <ci> KG_bar </ci>
		  <apply>
		    <times/>
            <ci> OAA_bar </ci>
			<ci> Keq </ci>
		  </apply>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="34">
      <apply><eq/>
        <ci> delta_r1 </ci>
        <apply>
		  <divide/>
          <ci> K </ci>
		  <ci> Nt </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="35">
      <apply><eq/>
        <ci> delta_r2 </ci>
        <apply>
		  <times/>
          <ci> alpha </ci>
		  <ci> delta_psi_m </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="36">
      <apply><eq/>
        <ci> delta_atp </ci>
        <apply>
		  <times/>
          <ci> b </ci>
		  <ci> At </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="37">
      <apply><eq/>
        <ci> delta_crit </ci>
        <apply>
		  <times/>
		  <cn cellml:units="dimensionless"> 3 </cn>
		  <apply>
		    <divide/>
			<apply>
		      <times/>
		      <cn cellml:units="dimensionless"> 1.2 </cn>
              <ci> F </ci>
			  <ci> delta_psi_m </ci>
			</apply>
			<apply>
		      <times/>
		      <ci> R </ci>
			  <ci> T </ci>
			</apply>
	      </apply>
		</apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="38">
      <apply><eq/>
        <ci> Kapp_dash </ci>
        <apply>
		  <times/>
          <ci> Kapp </ci>
		  <ci> Pi </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="39">
      <apply><eq/>
        <ci> epsilon1 </ci>
        <apply>
		  <divide/>
          <ci> AcCoA_bar </ci>
		  <ci> Pyr_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="40">
      <apply><eq/>
        <ci> epsilon2 </ci>
        <apply>
		  <divide/>
          <ci> Cit_bar </ci>
		  <ci> Pyr_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="41">
      <apply><eq/>
        <ci> epsilon3 </ci>
        <apply>
		  <divide/>
          <ci> KG_bar </ci>
		  <ci> Pyr_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="42">
      <apply><eq/>
        <ci> epsilon4 </ci>
        <apply>
		  <divide/>
          <ci> OAA_bar </ci>
		  <ci> Pyr_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="43">
      <apply><eq/>
        <ci> epsilon5 </ci>
        <apply>
		  <divide/>
          <ci> Nt </ci>
		  <ci> Pyr_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="44">
      <apply><eq/>
        <ci> epsilon6 </ci>
        <apply>
		  <divide/>
          <ci> At </ci>
		  <ci> Pyr_bar </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="45">
      <apply><eq/>
        <ci> epsilon7 </ci>
        <apply>
		  <times/>
          <apply>
		    <divide/>
            <ci> delta_psi_m </ci>
		    <ci> Pyr_bar </ci>
	      </apply>
		  <ci> C </ci>
	    </apply>
      </apply>
    </math>
	
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="46">
      <apply><eq/>
        <ci> tau </ci>
        <apply>
		  <times/>
          <apply>
		    <divide/>
            <ci> k1 </ci>
		    <ci> Pyr_bar </ci>
	      </apply>
		  <ci> time </ci>
	    </apply>
      </apply>
    </math>
  </component>
  
  
  
  
  <connection>
    <map_components component_1="p" component_2="normalised_constants"/>
    <map_variables variable_1="tau" variable_2="tau"/>
	<map_variables variable_1="p" variable_2="p"/>
  </connection>
  
  <connection>
    <map_components component_1="a" component_2="normalised_constants"/>
    <map_variables variable_1="tau" variable_2="tau"/>
	<map_variables variable_1="epsilon1" variable_2="epsilon1"/>
	<map_variables variable_1="a" variable_2="a"/>
  </connection>
  
  <connection>
    <map_components component_1="c" component_2="normalised_constants"/>
    <map_variables variable_1="tau" variable_2="tau"/>
	<map_variables variable_1="epsilon2" variable_2="epsilon2"/>
	<map_variables variable_1="c" variable_2="c"/>
  </connection>
  
  <connection>
    <map_components component_1="k" component_2="normalised_constants"/>
    <map_variables variable_1="tau" variable_2="tau"/>
	<map_variables variable_1="epsilon3" variable_2="epsilon3"/>
	<map_variables variable_1="k" variable_2="k"/>
  </connection>
  
  <connection>
    <map_components component_1="o" component_2="normalised_constants"/>
    <map_variables variable_1="tau" variable_2="tau"/>
	<map_variables variable_1="epsilon4" variable_2="epsilon4"/>
	<map_variables variable_1="o" variable_2="o"/>
  </connection>

  <connection>
    <map_components component_1="n" component_2="normalised_constants"/>
    <map_variables variable_1="tau" variable_2="tau"/>
	<map_variables variable_1="epsilon5" variable_2="epsilon5"/>
    <map_variables variable_1="n" variable_2="n"/>
  </connection>
  
  <connection>
    <map_components component_1="en" component_2="normalised_constants"/>
    <map_variables variable_1="tau" variable_2="tau"/>
	<map_variables variable_1="epsilon6" variable_2="epsilon6"/>
	<map_variables variable_1="en" variable_2="en"/>
  </connection>
  
  <connection>
    <map_components component_1="s" component_2="normalised_constants"/>
    <map_variables variable_1="tau" variable_2="tau"/>
	<map_variables variable_1="epsilon7" variable_2="epsilon7"/>
	<map_variables variable_1="s" variable_2="s"/>
  </connection>
  
  <connection>
    <map_components component_1="normalised_constants" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="p" component_2="v1"/>
    <map_variables variable_1="v1" variable_2="v1"/>
  </connection>
  
  <connection>
    <map_components component_1="p" component_2="v2"/>
    <map_variables variable_1="p" variable_2="p"/>
    <map_variables variable_1="v2" variable_2="v2"/>
  </connection>
  
  <connection>
    <map_components component_1="p" component_2="v7"/>
    <map_variables variable_1="p" variable_2="p"/>
    <map_variables variable_1="v7" variable_2="v7"/>
  </connection>
  
  <connection>
    <map_components component_1="a" component_2="v2"/>
    <map_variables variable_1="v2" variable_2="v2"/>
  </connection>
  
  <connection>
    <map_components component_1="a" component_2="v3"/>
    <map_variables variable_1="a" variable_2="a"/>
    <map_variables variable_1="v3" variable_2="v3"/>
  </connection>
  
  <connection>
    <map_components component_1="c" component_2="v3"/>
    <map_variables variable_1="v3" variable_2="v3"/>
  </connection>
  
  <connection>
    <map_components component_1="c" component_2="v4"/>
    <map_variables variable_1="c" variable_2="c"/>
    <map_variables variable_1="v4" variable_2="v4"/>
  </connection>
  
  <connection>
    <map_components component_1="k" component_2="v4"/>
    <map_variables variable_1="v4" variable_2="v4"/>
  </connection>
  
  <connection>
    <map_components component_1="k" component_2="v5"/>
    <map_variables variable_1="k" variable_2="k"/>
    <map_variables variable_1="v5" variable_2="v5"/>
  </connection>
  
  <connection>
    <map_components component_1="k" component_2="v6"/>
    <map_variables variable_1="k" variable_2="k"/>
    <map_variables variable_1="v6" variable_2="v6"/>
  </connection>
  
  <connection>
    <map_components component_1="o" component_2="v5"/>
    <map_variables variable_1="v5" variable_2="v5"/>
  </connection>
  
  <connection>
    <map_components component_1="o" component_2="v3"/>
    <map_variables variable_1="o" variable_2="o"/>
    <map_variables variable_1="v3" variable_2="v3"/>
  </connection>
  
  <connection>
    <map_components component_1="o" component_2="v6"/>
    <map_variables variable_1="o" variable_2="o"/>
    <map_variables variable_1="v6" variable_2="v6"/>
  </connection>
  
  <connection>
    <map_components component_1="o" component_2="v7"/>
    <map_variables variable_1="v7" variable_2="v7"/>
  </connection>
  
  <connection>
    <map_components component_1="o" component_2="v8"/>
    <map_variables variable_1="o" variable_2="o"/>
    <map_variables variable_1="v8" variable_2="v8"/>
  </connection>
  
  <connection>
    <map_components component_1="n" component_2="v2"/>
    <map_variables variable_1="n" variable_2="n"/>
    <map_variables variable_1="v2" variable_2="v2"/>
  </connection>
  
  <connection>
    <map_components component_1="n" component_2="v4"/>
    <map_variables variable_1="n" variable_2="n"/>
    <map_variables variable_1="v4" variable_2="v4"/>
  </connection>
  
  <connection>
    <map_components component_1="n" component_2="v5"/>
    <map_variables variable_1="n" variable_2="n"/>
	<map_variables variable_1="v5" variable_2="v5"/>
  </connection>
  
  <connection>
    <map_components component_1="n" component_2="vresp"/>
    <map_variables variable_1="n" variable_2="n"/>
	<map_variables variable_1="vresp" variable_2="vresp"/>
  </connection>
  
  <connection>
    <map_components component_1="en" component_2="vATP"/>
    <map_variables variable_1="en" variable_2="en"/>
    <map_variables variable_1="vATP" variable_2="vATP"/>
  </connection>
  
  <connection>
    <map_components component_1="en" component_2="vANT"/>
    <map_variables variable_1="en" variable_2="en"/>
    <map_variables variable_1="vANT" variable_2="vANT"/>
  </connection>
  
  <connection>
    <map_components component_1="en" component_2="v5"/>
    <map_variables variable_1="en" variable_2="en"/>
	<map_variables variable_1="v5" variable_2="v5"/>
  </connection>
  
  <connection>
    <map_components component_1="en" component_2="v7"/>
    <map_variables variable_1="en" variable_2="en"/>
	<map_variables variable_1="v7" variable_2="v7"/>
  </connection>
  
  <connection>
    <map_components component_1="s" component_2="vresp"/>
    <map_variables variable_1="s" variable_2="s"/>
	<map_variables variable_1="vresp" variable_2="vresp"/>
  </connection>
  
  <connection>
    <map_components component_1="s" component_2="vATP"/>
    <map_variables variable_1="vATP" variable_2="vATP"/>
	<map_variables variable_1="s" variable_2="s"/>
  </connection>
  
  <connection>
    <map_components component_1="s" component_2="vleak"/>
    <map_variables variable_1="s" variable_2="s"/>
	<map_variables variable_1="vleak" variable_2="vleak"/>
  </connection>
  
  <connection>
    <map_components component_1="s" component_2="vANT"/>
    <map_variables variable_1="vANT" variable_2="vANT"/>
  </connection>
  
  <connection>
    <map_components component_1="en_crit" component_2="vATP"/>
    <map_variables variable_1="en_crit" variable_2="en_crit"/>
  </connection>
  
  <connection>
    <map_components component_1="en_crit" component_2="s"/>
    <map_variables variable_1="s" variable_2="s"/>
  </connection>
  
  <connection>
    <map_components component_1="v2" component_2="normalised_constants"/>
    <map_variables variable_1="beta2" variable_2="beta2"/>
  </connection>
  
  <connection>
    <map_components component_1="v3" component_2="normalised_constants"/>
    <map_variables variable_1="beta3" variable_2="beta3"/>
  </connection>
  
  <connection>
    <map_components component_1="v4" component_2="normalised_constants"/>
    <map_variables variable_1="beta4" variable_2="beta4"/>
  </connection>
  
  <connection>
    <map_components component_1="v5" component_2="normalised_constants"/>
    <map_variables variable_1="beta5" variable_2="beta5"/>
  </connection>
  
  <connection>
    <map_components component_1="v6" component_2="normalised_constants"/>
    <map_variables variable_1="beta6" variable_2="beta6"/>
	<map_variables variable_1="delta_6" variable_2="delta_6"/>
  </connection>
  
  <connection>
    <map_components component_1="v7" component_2="normalised_constants"/>
    <map_variables variable_1="beta7" variable_2="beta7"/>
  </connection>
  
  <connection>
    <map_components component_1="v8" component_2="normalised_constants"/>
    <map_variables variable_1="beta8" variable_2="beta8"/>
  </connection>
  
  <connection>
    <map_components component_1="vANT" component_2="normalised_constants"/>
    <map_variables variable_1="beta_ANT" variable_2="beta_ANT"/>
  </connection>
  
  <connection>
    <map_components component_1="vleak" component_2="normalised_constants"/>
    <map_variables variable_1="beta_leak" variable_2="beta_leak"/>
  </connection>
  
  <connection>
    <map_components component_1="vresp" component_2="normalised_constants"/>
    <map_variables variable_1="beta_resp" variable_2="beta_resp"/>
	<map_variables variable_1="delta_r1" variable_2="delta_r1"/>
	<map_variables variable_1="delta_r2" variable_2="delta_r2"/>
  </connection>
  
  <connection>
    <map_components component_1="vATP" component_2="normalised_constants"/>
    <map_variables variable_1="beta_ATP" variable_2="beta_ATP"/>
	<map_variables variable_1="delta_atp" variable_2="delta_atp"/>
  </connection>
  
  <connection>
    <map_components component_1="en_crit" component_2="normalised_constants"/>
    <map_variables variable_1="Kapp_dash" variable_2="Kapp_dash"/>
	<map_variables variable_1="delta_crit" variable_2="delta_crit"/>
  </connection>
  
  
  
 
  
  
  <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    
	<rdf:Description rdf:about="">
      <dc:title>Mitochondrial energetic metabolism: a simplified model of TCA cycle with ATP production (scaled version)</dc:title>
	  <dc:creator rdf:parseType="Resource">
        <vCard:N rdf:parseType="Resource">
          <vCard:Family>Lloyd</vCard:Family>
          <vCard:Given>Catherine</vCard:Given>
		  <vCard:Other>May</vCard:Other>
        </vCard:N>
        <vCard:EMAIL rdf:parseType="Resource">
          <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland</vCard:Orgname>
          <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
    </rdf:Description>
    
    <rdf:Description rdf:about="#nazarat_2009">
      <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>metabolism</rdf:li>
			  <rdf:li>TCA cycle</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>

      <bqs:reference rdf:parseType="Resource">
        <bqs:Pubmed_id>19007794</bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator>
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Nazaret</vCard:Family>
                    <vCard:Given>C</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Heiske</vCard:Family>
                    <vCard:Given>M</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Thurley</vCard:Family>
                    <vCard:Given>K</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Mazat</vCard:Family>
                    <vCard:Given>J</vCard:Given>
					<vCard:Other>P</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title>
            Mitochondrial energetic metabolism: a simplified model of TCA cycle with ATP production
          </dc:title>
          <dcterms:issued rdf:parseType="Resource">
            <dcterms:W3CDTF>2009-06-07</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title>Journal of Theoretical Biology</dc:title>
          </bqs:Journal>
		  <bqs:volume>258</bqs:volume>
          <bqs:first_page>455</bqs:first_page>
          <bqs:last_page>464</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
</model>