// This CellML file was generated on 07/05/2008 at 17:28:48 using:
//
// COR (0.9.31.927)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// created: W3CDTF 2008-05-08T00:00:00+00:00
// creator: Orgname University of Oxford; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble
// modification: W3CDTF 2008-05-08T04:35:11+12:00; Curation of units.; Given Penny; Family Noble
// reference: Pubmed_id 12384487; Given Y; Family Kurata; Given I; Family Hisatome; Given S; Family Imanishi; Given T; Family Shibamoto; title Dynamical description of sinoatrial node pacemaking: improved mathematical model for primary pacemaker cell; volume 283; first_page 2074; title Am J Physiol Heart Circ Physiol; W3CDTF 2002-11-00 00:00; last_page 2101
// reference: subject_type keyword; cardiac; electrophysiology; Sinoatrial Node; pacemaker; sinoatrial node
def model kurata_hisatome_imanishi_shibamoto_2002_version02 as
  // Improved Mathematical Model for the Primary Pacemaker Cell
  //
  // Penny Noble
  //
  // Cardiac Electrophysiology Group, Oxford University
  //
  // Model Status
  //
  // This model was created from Version 01 by Penny Noble of Oxford University. Version 02 is known to run in COR and PCEnv. A PCEnv session is also associated with this model.
  //
  // Model Structure
  //
  // The pacemaker activity of the sinoatrial (SA) node initiates the spontaneous beating of the heart. Over the past decade a large body of data on the ionic currents underlying this pacemaker activity has been elucidated in patch-clamp experiments. On the basis of this data, several mathematical models describing the pace maker activity of a single rabbit SA node cell have been developed. These include:
  //
  // Demir et al. Sinoatrial Node Model, 1994; (${HTML_EXMPL_D_SAN_MODEL})
  //
  // Modelling the Ion Currents Underlying Sinoatrial Node Pacemaker Activity, Dokos et al., 1996; (${HTML_EXMPL_DOKOS_MODEL})
  //
  // A Model of Sinoatrial Node Vagal Control, Dokos et al., 1996; (${HTML_EXMPL_DOKOS_MODEL_II})
  //
  // Demir et al. Sinoatrial Node Model, 1999; (${HTML_EXMPL_D99_SAN_MODEL})
  //
  // Zhang et al. Sinoatrial Node Model, 2000; and (${HTML_EXMPL_Z_SAN_MODEL})
  //
  // Boyett et al. Sinoatrial Node Model, 2001. (${HTML_EXMPL_B_SAN_MODEL})
  //
  // With the elucidation of more experimental data, these models have become increasingly complex, with equations that describe calcium buffering, intracellular compartmentation, and additional ionic currents through channels, pumps and exchangers. In the study by Kurata et al. described here, the aim is to develop an improved mathematical model of a single primary pacemaker cell of the rabbit SA node, in order to investigate the mechanisms underlying pacemaker generation. On the basis of the most recent experimental data, Kurata et al. updated the previously published models (see list above) in several ways:
  //
  // A sustained inward current has been added (Ist ).
  //
  // The voltage- and Ca2+-dependent activation kinetics of the L-type calcium channel current (ICa,L ) have been reformulated.
  //
  // Expressions for the activation kinetics of the rapidly activating delayed rectifier potassium current (IKr ) have been updated.
  //
  // Revised kinetic equations for two 4-AP sensitive currents (Ito and Isus ) have been incorporated.
  //
  // Voltage- and concentration-dependent kinetics of the Na+-K+ pump current (INaK ) have been reformulated.
  //
  // The subsarcolemmal space (see below) as a diffusion barrier for intracellular Ca2+ has been added.
  //
  // The model was validated by comparing simulation results with experimental data, and also by comparing them with those of previous mathematical models. The authors concluded that their model represented a significant improvement over previous models because it can:
  //
  // Simulate whole cell voltage-clamp data for ICa,L , IKr , and Ist ;
  //
  // Reproduce the wave shapes of spontaneous action potentials and ionic currents during action potential clamp recordings; and
  //
  // Mimic the effects of channel blockers or Ca 2+ buffers on pacemaker activity more accurately than the previous models.
  //
  // The model has been described here in CellML (the raw CellML description of the Kurata et al. 2002 model can be downloaded in various formats as described in ).
  //
  // The complete original paper reference is cited below:
  //
  // Dynamical description of sinoatrial node pacemaking: improved mathematical model for primary pacemaker cell, Yasutaka Kurata, Ichiro Hisatome, Sunao Imanishi, and Toshishige Shibamoto, 2002,American Journal of Physiology, 283, H2074-H2101. PubMed ID: 12384487 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12384487&dopt=Abstract)
  //
  // reaction diagram
  //
  // Schematic diagram depicting the intracellular compartments for Ca2+.
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: nano};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit per_picoF as
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoA_per_millimolar_picoF as
    unit ampere {pref: pico};
    unit millimolar {expo: -1};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit attojoule_per_millimole_kelvin as
    unit joule {pref: atto};
    unit mole {pref: milli, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit femtocoulomb_per_millimole as
    unit coulomb {pref: femto};
    unit mole {pref: milli, expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {pub: out, init: -58.600291137693};
    var R: attojoule_per_millimole_kelvin {pub: out, init: 8314400000000000};
    var T: kelvin {pub: out, init: 310.15};
    var F: femtocoulomb_per_millimole {pub: out, init: 96485000000000000};
    var Cm: picoF {pub: out, init: 32};
    var time: millisecond {pub: in};
    var i_CaT: picoA {pub: in};
    var i_CaL: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_sus: picoA {pub: in};
    var i_h: picoA {pub: in};
    var i_st: picoA {pub: in};
    var i_b_Na: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_K_ACh: picoA {pub: in};
    ode(V, time) = -(i_CaL+i_CaT+i_Kr+i_Ks+i_to+i_sus+i_h+i_st+i_b_Na+i_K_ACh+i_NaK+i_NaCa)/1{picoF};
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var R: attojoule_per_millimole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: femtocoulomb_per_millimole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Ko/Ki);
  enddef;

  def comp L_type_calcium_channel_current as
    var i_CaL: picoA {pub: out};
    var g_CaL: nanoS {init: 0.58};
    var E_CaL: millivolt {init: 45};
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_sub: millimolar {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    i_CaL = g_CaL*(V-E_CaL)*d*f*fCa;
  enddef;

  def comp L_type_calcium_channel_current_d_gate as
    var d: dimensionless {pub: out, init: 0.000602055134};
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var alpha_d: per_millisecond;
    var beta_d: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+14.1{millivolt})/6{millivolt}));
    tau_d = 1{dimensionless}/(alpha_d+beta_d);
    alpha_d = -0.02839{per_millivolt_millisecond}*(V+35{millivolt})/(exp(-(V+35{millivolt})/2.5{millivolt})-1{dimensionless})-0.0849{per_millivolt_millisecond}*V/(exp(-V/4.808{millivolt})-1{dimensionless});
    beta_d = 0.01143{per_millivolt_millisecond}*(V-5{millivolt})/(exp((V-5{millivolt})/2.5{millivolt})-1{dimensionless});
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp L_type_calcium_channel_current_f_gate as
    var f: dimensionless {pub: out, init: 0.626999773853};
    var f_infinity: dimensionless;
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+30{millivolt})/5{millivolt}));
    tau_f = 44.3{millisecond}+257.1{millisecond}*exp(-sqr((V+32.5{millivolt})/13.9{millivolt}));
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp L_type_calcium_channel_current_fCa_gate as
    var fCa: dimensionless {pub: out, init: 0.589580408056};
    var alpha_fCa: per_millisecond;
    var beta_fCa: per_millimolar_millisecond {init: 60};
    var fCa_infinity: dimensionless;
    var tau_fCa: millisecond;
    var Km_fCa: millimolar {init: 0.00035};
    var V: millivolt {pub: in};
    var Ca_sub: millimolar {pub: in};
    var time: millisecond {pub: in};
    alpha_fCa = Km_fCa*beta_fCa;
    fCa_infinity = Km_fCa/(Km_fCa+Ca_sub);
    tau_fCa = fCa_infinity/alpha_fCa;
    ode(fCa, time) = (fCa_infinity-fCa)/tau_fCa;
  enddef;

  def comp T_type_calcium_channel_current as
    var i_CaT: picoA {pub: out};
    var g_CaT: nanoS {init: 0.458};
    var Cm: picoF {pub: in};
    var E_CaT: millivolt {init: 45};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    i_CaT = g_CaT*(V-E_CaT)*d*f;
  enddef;

  def comp T_type_calcium_channel_current_d_gate as
    var d: dimensionless {pub: out, init: 0.004571884917};
    var d_infinity: dimensionless;
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+26.3{millivolt})/6{millivolt}));
    tau_d = 1{millisecond}/(1.068{dimensionless}*exp((V+26.3{millivolt})/30{millivolt})+1.068{dimensionless}*exp(-(V+26.3{millivolt})/30{millivolt}));
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp T_type_calcium_channel_current_f_gate as
    var f: dimensionless {pub: out, init: 0.249637570396};
    var f_infinity: dimensionless;
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+61.7{millivolt})/5.6{millivolt}));
    tau_f = 1{millisecond}/(0.0153{dimensionless}*exp(-(V+61.7{millivolt})/83.3{millivolt})+0.015{dimensionless}*exp((V+61.7{millivolt})/15.38{millivolt}));
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp rapidly_activating_delayed_rectifier_potassium_current as
    var i_Kr: picoA {pub: out};
    var g_Kr: nanoS;
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var paS: dimensionless {priv: in};
    var paF: dimensionless {priv: in};
    var piy: dimensionless {priv: in};
    g_Kr = 0.025{nanoS}*pow(Ko/1{millimolar}, 0.59{dimensionless});
    i_Kr = g_Kr*(V-E_K)*(0.6{dimensionless}*paF+0.4{dimensionless}*paS)*piy;
  enddef;

  def comp rapidly_activating_delayed_rectifier_potassium_current_pa_gate as
    var paS: dimensionless {pub: out, init: 0.629323128348};
    var paF: dimensionless {pub: out, init: 0.3493633709533};
    var pa_infinity: dimensionless;
    var tau_paS: millisecond;
    var tau_paF: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    pa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/10.6{millivolt}));
    tau_paS = 0.84655354{millisecond}/(0.0042{dimensionless}*exp(V/17{millivolt})+0.00015{dimensionless}*exp(-V/21.6{millivolt}));
    tau_paF = 0.84655354{millisecond}/(0.0372{dimensionless}*exp(V/15.9{millivolt})+0.00096{dimensionless}*exp(-V/22.5{millivolt}));
    ode(paS, time) = (pa_infinity-paS)/tau_paS;
    ode(paF, time) = (pa_infinity-paF)/tau_paF;
  enddef;

  def comp rapidly_activating_delayed_rectifier_potassium_current_pi_gate as
    var piy: dimensionless {pub: out, init: 0.852396631172};
    var pi_infinity: dimensionless;
    var tau_pi: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    pi_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.6{millivolt})/17.1{millivolt}));
    tau_pi = 1{millisecond}/(0.1{dimensionless}*exp(-V/54.645{millivolt})+0.656{dimensionless}*exp(V/106.157{millivolt}));
    ode(piy, time) = (pi_infinity-piy)/tau_pi;
  enddef;

  def comp slowly_activating_delayed_rectifier_potassium_current as
    var i_Ks: picoA {pub: out};
    var g_Ks: nanoS {init: 0.0259};
    var Cm: picoF {pub: in};
    var E_Ks: millivolt;
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var R: attojoule_per_millimole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: femtocoulomb_per_millimole {pub: in};
    var n: dimensionless {priv: in};
    E_Ks = R*T/F*ln((Ko+0.12{dimensionless}*Nao)/(Ki+0.12{dimensionless}*Nai));
    i_Ks = g_Ks*(V-E_Ks)*sqr(n);
  enddef;

  def comp slowly_activating_delayed_rectifier_potassium_current_n_gate as
    var n: dimensionless {pub: out, init: 0.054409723782};
    var n_infinity: dimensionless;
    var tau_n: millisecond;
    var alpha_n: per_millisecond;
    var beta_n: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    n_infinity = alpha_n/(alpha_n+beta_n);
    tau_n = 1{dimensionless}/(alpha_n+beta_n);
    alpha_n = 0.014{per_millisecond}/(1{dimensionless}+exp(-(V-40{millivolt})/9{millivolt}));
    beta_n = 0.001{per_millisecond}*exp(-V/45{millivolt});
    ode(n, time) = (n_infinity-n)/tau_n;
  enddef;

  def comp AP_sensitive_currents as
    var i_to: picoA {pub: out};
    var i_sus: picoA {pub: out};
    var g_to: nanoS {init: 0.18};
    var g_sus: nanoS {init: 0.02};
    var Cm: picoF {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(V-E_K)*q*r;
    i_sus = g_sus*(V-E_K)*r;
  enddef;

  def comp AP_sensitive_currents_q_gate as
    var q: dimensionless {pub: out, init: 0.531446952485};
    var q_infinity: dimensionless;
    var tau_q: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+49{millivolt})/13{millivolt}));
    tau_q = 0.6{dimensionless}*(65.17{dimensionless}/(0.57{per_millisecond}*exp(-0.08{per_millivolt}*(V+44{millivolt}))+0.065{per_millisecond}*exp(0.1{per_millivolt}*(V+45.93{millivolt})))+10.1{millisecond});
    ode(q, time) = (q_infinity-q)/tau_q;
  enddef;

  def comp AP_sensitive_currents_r_gate as
    var r: dimensionless {pub: out, init: 0.005550489445};
    var r_infinity: dimensionless;
    var tau_r: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-19.3{millivolt})/15{millivolt}));
    tau_r = 0.66{dimensionless}*1.4{dimensionless}*(15.59{millisecond}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt})))+2.98{millisecond});
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp hyperpolarisation_activated_current as
    var i_h: picoA {pub: out};
    var i_h_Na: picoA {pub: out};
    var i_h_K: picoA {pub: out};
    var g_h_Na: nanoS {init: 0.1437375};
    var g_h_K: nanoS {init: 0.2312625};
    var Cm: picoF {pub: in};
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var y: dimensionless {priv: in};
    i_h_Na = g_h_Na*(V-E_Na)*sqr(y);
    i_h_K = g_h_K*(V-E_K)*sqr(y);
    i_h = i_h_Na+i_h_K;
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var y: dimensionless {pub: out, init: 0.067156687129};
    var y_infinity: dimensionless;
    var tau_y: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+64{millivolt})/13.5{millivolt}));
    tau_y = 0.7166529{millisecond}/(exp(-(V+386.9{millivolt})/45.302{millivolt})+exp((V-73.08{millivolt})/19.231{millivolt}));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp sustained_inward_current as
    var i_st: picoA {pub: out};
    var g_st: nanoS {init: 0.015};
    var Cm: picoF {pub: in};
    var E_st: millivolt {init: 37.4};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var qa: dimensionless {priv: in};
    var qi: dimensionless {priv: in};
    i_st = g_st*(V-E_st)*qa*qi;
  enddef;

  def comp sustained_inward_current_qa_gate as
    var qa: dimensionless {pub: out, init: 0.426018100136};
    var qa_infinity: dimensionless;
    var tau_qa: millisecond;
    var alpha_qa: per_millisecond;
    var beta_qa: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    qa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+57{millivolt})/5{millivolt}));
    tau_qa = 1{dimensionless}/(alpha_qa+beta_qa);
    alpha_qa = 1{dimensionless}/(0.15{millisecond}*exp(-V/11{millivolt})+0.2{millisecond}*exp(-V/700{millivolt}));
    beta_qa = 1{dimensionless}/(16{millisecond}*exp(V/8{millivolt})+15{millisecond}*exp(V/50{millivolt}));
    ode(qa, time) = (qa_infinity-qa)/tau_qa;
  enddef;

  def comp sustained_inward_current_qi_gate as
    var qi: dimensionless {pub: out, init: 0.333330378068};
    var qi_infinity: dimensionless;
    var tau_qi: millisecond;
    var alpha_qi: per_millisecond;
    var beta_qi: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    qi_infinity = alpha_qi/(alpha_qi+beta_qi);
    tau_qi = 6.65{dimensionless}/(alpha_qi+beta_qi);
    alpha_qi = 1{dimensionless}/(3100{millisecond}*exp(V/13{millivolt})+700{millisecond}*exp(V/70{millivolt}));
    beta_qi = 1{dimensionless}/(95{millisecond}*exp(-V/10{millivolt})+50{millisecond}*exp(-V/700{millivolt}))+0.000229{per_millisecond}/(1{dimensionless}+exp(-V/5{millivolt}));
    ode(qi, time) = (qi_infinity-qi)/tau_qi;
  enddef;

  def comp sodium_dependent_background_current as
    var i_b_Na: picoA {pub: out};
    var g_b_Na: nanoS {init: 0.0054};
    var Cm: picoF {pub: in};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_b_Na*(V-E_Na);
  enddef;

  def comp background_muscarinic_potassium_channel_current as
    var i_K_ACh: picoA {pub: out};
    var g_K_ACh: picoA;
    var Cm: picoF {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var R: attojoule_per_millimole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: femtocoulomb_per_millimole {pub: in};
    g_K_ACh = 0.0011{picoA}*pow(Ko/1{millimolar}, 0.41{dimensionless});
    i_K_ACh = g_K_ACh*(Ki-Ko*exp(-V*F/(R*T)))/1{millimolar};
  enddef;

  def comp sodium_potassium_pump_current as
    var i_NaK: picoA {pub: out};
    var Km_Kp: millimolar {init: 1.4};
    var Km_Nap: millimolar {init: 14};
    var i_NaK_max: picoA {init: 3.6};
    var Cm: picoF {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaK = i_NaK_max*pow(1{dimensionless}+pow(Km_Kp/Ko, 1.2{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+pow(Km_Nap/Nai, 1.3{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+exp(-(V-E_Na+120{millivolt})/30{millivolt}), -1{dimensionless});
  enddef;

  def comp sodium_calcium_exchange_current as
    var i_NaCa: picoA {pub: out};
    var kNaCa: picoA {init: 125};
    var Cm: picoF {pub: in};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 0.1369};
    var Qn: dimensionless {init: 0.4315};
    var Qco: dimensionless {init: 0};
    var K3ni: millimolar {init: 26.44};
    var Kci: millimolar {init: 0.0207};
    var K1ni: millimolar {init: 395.3};
    var K2ni: millimolar {init: 2.289};
    var Kcni: millimolar {init: 26.44};
    var K3no: millimolar {init: 4.663};
    var K1no: millimolar {init: 1628};
    var K2no: millimolar {init: 561.4};
    var Kco: millimolar {init: 3.663};
    var do: dimensionless;
    var di: dimensionless;
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: millisecond {pub: in};
    var R: attojoule_per_millimole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: femtocoulomb_per_millimole {pub: in};
    var V: millivolt {pub: in};
    i_NaCa = kNaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    k12 = Ca_sub/Kci*exp(-Qci*V*F/(R*T))/di;
    k14 = Nai/K1ni*Nai/K2ni*(1{dimensionless}+Nai/K3ni)*exp(Qn*V*F/(2{dimensionless}*R*T))/di;
    k41 = exp(-Qn*V*F/(2{dimensionless}*R*T));
    di = 1{dimensionless}+Ca_sub/Kci*(1{dimensionless}+exp(-Qci*V*F/(R*T))+Nai/Kcni)+Nai/K1ni*(1{dimensionless}+Nai/K2ni*(1{dimensionless}+Nai/K3ni));
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*V*F/(R*T))/do;
    k23 = Nao/K1no*Nao/K2no*(1{dimensionless}+Nao/K3no)*exp(-Qn*V*F/(2{dimensionless}*R*T))/do;
    k32 = exp(Qn*V*F/(2{dimensionless}*R*T));
    do = 1{dimensionless}+Cao/Kco*(1{dimensionless}+exp(Qco*V*F/(R*T)))+Nao/K1no*(1{dimensionless}+Nao/K2no)*(1{dimensionless}+Nao/K3no);
  enddef;

  def comp intracellular_calcium_dynamics as
    var j_Ca_dif: millimolar_per_millisecond {pub: out};
    var j_rel: millimolar_per_millisecond {pub: out};
    var j_up: millimolar_per_millisecond {pub: out};
    var j_tr: millimolar_per_millisecond {pub: out};
    var tau_dif_Ca: millisecond {init: 0.04};
    var tau_tr: millisecond {init: 60};
    var K_rel: millimolar {init: 0.0012};
    var P_up: millimolar_per_millisecond {init: 0.005};
    var P_rel: per_millisecond {init: 0.5};
    var K_up: millimolar {init: 0.0006};
    var Ca_up: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    j_Ca_dif = (Ca_sub-Cai)/tau_dif_Ca;
    j_rel = P_rel*(Ca_rel-Ca_sub)/(1{dimensionless}+sqr(K_rel/Ca_sub));
    j_up = P_up/(1{dimensionless}+K_up/Cai);
    j_tr = (Ca_up-Ca_rel)/tau_tr;
  enddef;

  def comp intracellular_ion_concentrations as
    var Cai: millimolar {pub: out, init: 0.000312494921};
    var Cao: millimolar {pub: out, init: 2};
    var Ca_up: millimolar {pub: out, init: 1.462338380106};
    var Ca_rel: millimolar {pub: out, init: 0.296742023718};
    var Ca_sub: millimolar {pub: out, init: 0.00019074741};
    var Nai: millimolar {pub: out, init: 9.438646305915};
    var Nao: millimolar {pub: out, init: 140};
    var Ki: millimolar {pub: out, init: 139.984146485614};
    var Ko: millimolar {pub: out, init: 5.4};
    var Mgi: millimolar {pub: out, init: 2.5};
    var V_i: litre {init: 0.0000000000015835};
    var V_rel: litre {init: 0.0000000000000042223};
    var V_up: litre {init: 0.000000000000040816};
    var V_sub: litre {init: 0.000000000000035098};
    var time: millisecond {pub: in};
    var F: femtocoulomb_per_millimole {pub: in};
    var Cm: picoF {pub: in};
    var i_b_Na: picoA {pub: in};
    var i_CaL: picoA {pub: in};
    var i_CaT: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var j_rel: millimolar_per_millisecond {pub: in};
    var j_Ca_dif: millimolar_per_millisecond {pub: in};
    var j_tr: millimolar_per_millisecond {pub: in};
    var j_up: millimolar_per_millisecond {pub: in};
    var i_h_Na: picoA {pub: in};
    var i_st: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_to: picoA {pub: in};
    var i_sus: picoA {pub: in};
    var i_h_K: picoA {pub: in};
    var i_K_ACh: picoA {pub: in};
    var TMC_tot: dimensionless {pub: in};
    var CM_tot: dimensionless {pub: in};
    var TC_tot: dimensionless {pub: in};
    var CQ_tot: dimensionless {pub: in};
    var delta_fTMC: millimolar_per_millisecond {pub: in};
    var delta_fCMi: millimolar_per_millisecond {pub: in};
    var delta_fCMs: millimolar_per_millisecond {pub: in};
    var delta_fTC: millimolar_per_millisecond {pub: in};
    var delta_fCQ: millimolar_per_millisecond {pub: in};
    ode(Nai, time) = -(i_h_Na+i_st+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)*Cm/(1{picoF}*F*(V_i+V_sub));
    ode(Ki, time) = -(i_Kr+i_Ks+i_to+i_sus+i_h_K+i_K_ACh+(-2{dimensionless}*i_NaK))*Cm/(1{picoF}*F*(V_i+V_sub));
    ode(Cai, time) = (j_Ca_dif*V_sub-j_up*V_up)/V_i-(CM_tot*delta_fCMi+TC_tot*delta_fTC+TMC_tot*delta_fTMC);
    ode(Ca_sub, time) = (-(i_CaL+i_CaT-2{dimensionless}*i_NaCa)*Cm/(1{picoF}*2{dimensionless}*F)+j_rel*V_rel)/V_sub-(j_Ca_dif+CM_tot*delta_fCMs);
    ode(Ca_up, time) = j_up-j_tr*V_rel/V_up;
    ode(Ca_rel, time) = j_tr-(j_rel+CQ_tot*delta_fCQ);
  enddef;

  def comp calcium_buffering as
    var TC_tot: dimensionless {pub: out, init: 0.031};
    var TMC_tot: dimensionless {pub: out, init: 0.062};
    var CM_tot: dimensionless {pub: out, init: 0.045};
    var CQ_tot: dimensionless {pub: out, init: 10};
    var delta_fTC: millimolar_per_millisecond {pub: out};
    var delta_fTMC: millimolar_per_millisecond {pub: out};
    var delta_fCMs: millimolar_per_millisecond {pub: out};
    var delta_fCMi: millimolar_per_millisecond {pub: out};
    var delta_fCQ: millimolar_per_millisecond {pub: out};
    var delta_fTMM: millimolar_per_millisecond;
    var fTMM: millimolar {init: 0.350600895635};
    var fCMi: millimolar {init: 0.116947220413};
    var fCMs: millimolar {init: 0.074631965653};
    var fTC: millimolar {init: 0.059206293446};
    var fTMC: millimolar {init: 0.602955114871};
    var fCQ: millimolar {init: 0.260317260703};
    var kf_TC: per_millimolar_millisecond {init: 88.8};
    var kf_TMM: per_millimolar_millisecond {init: 2.277};
    var kf_TMC: per_millimolar_millisecond {init: 227.7};
    var kf_CM: per_millimolar_millisecond {init: 227.7};
    var kf_CQ: per_millimolar_millisecond {init: 0.534};
    var kb_TC: per_millisecond {init: 0.446};
    var kb_TMC: per_millisecond {init: 0.00751};
    var kb_TMM: per_millisecond {init: 0.751};
    var kb_CM: per_millisecond {init: 0.542};
    var kb_CQ: per_millisecond {init: 0.445};
    var time: millisecond {pub: in};
    var Mgi: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    ode(fTC, time) = delta_fTC;
    delta_fTC = kf_TC*Cai*(1{millimolar}-fTC)-kb_TC*fTC;
    ode(fTMC, time) = delta_fTMC;
    delta_fTMC = kf_TMC*Cai*(1{millimolar}-(fTMC+fTMM))-kb_TMC*fTMC;
    ode(fTMM, time) = delta_fTMM;
    delta_fTMM = kf_TMM*Mgi*(1{millimolar}-(fTMC+fTMM))-kb_TMM*fTMM;
    ode(fCMi, time) = delta_fCMi;
    delta_fCMi = kf_CM*Cai*(1{millimolar}-fCMi)-kb_CM*fCMi;
    ode(fCMs, time) = delta_fCMs;
    delta_fCMs = kf_CM*Ca_sub*(1{millimolar}-fCMs)-kb_CM*fCMs;
    ode(fCQ, time) = delta_fCQ;
    delta_fCQ = kf_CQ*Ca_rel*(1{millimolar}-fCQ)-kb_CQ*fCQ;
  enddef;

  def group as containment for
    comp membrane incl
      comp L_type_calcium_channel_current incl
        comp L_type_calcium_channel_current_d_gate;
        comp L_type_calcium_channel_current_f_gate;
        comp L_type_calcium_channel_current_fCa_gate;
      endcomp;
      comp T_type_calcium_channel_current incl
        comp T_type_calcium_channel_current_d_gate;
        comp T_type_calcium_channel_current_f_gate;
      endcomp;
      comp rapidly_activating_delayed_rectifier_potassium_current incl
        comp rapidly_activating_delayed_rectifier_potassium_current_pa_gate;
        comp rapidly_activating_delayed_rectifier_potassium_current_pi_gate;
      endcomp;
      comp slowly_activating_delayed_rectifier_potassium_current incl
        comp slowly_activating_delayed_rectifier_potassium_current_n_gate;
      endcomp;
      comp AP_sensitive_currents incl
        comp AP_sensitive_currents_q_gate;
        comp AP_sensitive_currents_r_gate;
      endcomp;
      comp hyperpolarisation_activated_current incl
        comp hyperpolarisation_activated_current_y_gate;
      endcomp;
      comp sustained_inward_current incl
        comp sustained_inward_current_qa_gate;
        comp sustained_inward_current_qi_gate;
      endcomp;
      comp sodium_dependent_background_current;
      comp background_muscarinic_potassium_channel_current;
      comp sodium_potassium_pump_current;
      comp sodium_calcium_exchange_current;
      comp intracellular_calcium_dynamics;
      comp intracellular_ion_concentrations;
      comp calcium_buffering;
    endcomp;
  enddef;

  def group as encapsulation for
    comp L_type_calcium_channel_current incl
      comp L_type_calcium_channel_current_d_gate;
      comp L_type_calcium_channel_current_f_gate;
      comp L_type_calcium_channel_current_fCa_gate;
    endcomp;
    comp T_type_calcium_channel_current incl
      comp T_type_calcium_channel_current_d_gate;
      comp T_type_calcium_channel_current_f_gate;
    endcomp;
    comp rapidly_activating_delayed_rectifier_potassium_current incl
      comp rapidly_activating_delayed_rectifier_potassium_current_pa_gate;
      comp rapidly_activating_delayed_rectifier_potassium_current_pi_gate;
    endcomp;
    comp slowly_activating_delayed_rectifier_potassium_current incl
      comp slowly_activating_delayed_rectifier_potassium_current_n_gate;
    endcomp;
    comp AP_sensitive_currents incl
      comp AP_sensitive_currents_q_gate;
      comp AP_sensitive_currents_r_gate;
    endcomp;
    comp hyperpolarisation_activated_current incl
      comp hyperpolarisation_activated_current_y_gate;
    endcomp;
    comp sustained_inward_current incl
      comp sustained_inward_current_qa_gate;
      comp sustained_inward_current_qi_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_channel_current and environment for
    vars time and time;
  enddef;
  def map between T_type_calcium_channel_current and environment for
    vars time and time;
  enddef;
  def map between rapidly_activating_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slowly_activating_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between AP_sensitive_currents and environment for
    vars time and time;
  enddef;
  def map between hyperpolarisation_activated_current and environment for
    vars time and time;
  enddef;
  def map between sustained_inward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_dependent_background_current and environment for
    vars time and time;
  enddef;
  def map between background_muscarinic_potassium_channel_current and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchange_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_buffering and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and membrane for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between L_type_calcium_channel_current and membrane for
    vars V and V;
    vars i_CaL and i_CaL;
    vars Cm and Cm;
  enddef;
  def map between T_type_calcium_channel_current and membrane for
    vars V and V;
    vars i_CaT and i_CaT;
    vars Cm and Cm;
  enddef;
  def map between rapidly_activating_delayed_rectifier_potassium_current and membrane for
    vars V and V;
    vars i_Kr and i_Kr;
    vars Cm and Cm;
  enddef;
  def map between slowly_activating_delayed_rectifier_potassium_current and membrane for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars F and F;
    vars T and T;
    vars Cm and Cm;
  enddef;
  def map between AP_sensitive_currents and membrane for
    vars V and V;
    vars i_to and i_to;
    vars i_sus and i_sus;
    vars Cm and Cm;
  enddef;
  def map between hyperpolarisation_activated_current and membrane for
    vars V and V;
    vars i_h and i_h;
    vars Cm and Cm;
  enddef;
  def map between sustained_inward_current and membrane for
    vars V and V;
    vars i_st and i_st;
    vars Cm and Cm;
  enddef;
  def map between sodium_dependent_background_current and membrane for
    vars V and V;
    vars i_b_Na and i_b_Na;
    vars Cm and Cm;
  enddef;
  def map between background_muscarinic_potassium_channel_current and membrane for
    vars V and V;
    vars i_K_ACh and i_K_ACh;
    vars R and R;
    vars F and F;
    vars T and T;
    vars Cm and Cm;
  enddef;
  def map between sodium_potassium_pump_current and membrane for
    vars V and V;
    vars i_NaK and i_NaK;
    vars Cm and Cm;
  enddef;
  def map between sodium_calcium_exchange_current and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars F and F;
    vars T and T;
    vars Cm and Cm;
  enddef;
  def map between intracellular_ion_concentrations and membrane for
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between reversal_potentials and intracellular_ion_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ki and Ki;
    vars Ko and Ko;
  enddef;
  def map between reversal_potentials and rapidly_activating_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and AP_sensitive_currents for
    vars E_K and E_K;
  enddef;
  def map between hyperpolarisation_activated_current and reversal_potentials for
    vars E_Na and E_Na;
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and sodium_dependent_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and sodium_potassium_pump_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_calcium_channel_current and intracellular_ion_concentrations for
    vars Ca_sub and Ca_sub;
    vars i_CaL and i_CaL;
  enddef;
  def map between T_type_calcium_channel_current and intracellular_ion_concentrations for
    vars i_CaT and i_CaT;
  enddef;
  def map between rapidly_activating_delayed_rectifier_potassium_current and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
    vars Ko and Ko;
  enddef;
  def map between slowly_activating_delayed_rectifier_potassium_current and intracellular_ion_concentrations for
    vars i_Ks and i_Ks;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ki and Ki;
    vars Ko and Ko;
  enddef;
  def map between AP_sensitive_currents and intracellular_ion_concentrations for
    vars i_to and i_to;
    vars i_sus and i_sus;
  enddef;
  def map between hyperpolarisation_activated_current and intracellular_ion_concentrations for
    vars i_h_Na and i_h_Na;
    vars i_h_K and i_h_K;
  enddef;
  def map between sustained_inward_current and intracellular_ion_concentrations for
    vars i_st and i_st;
  enddef;
  def map between sodium_dependent_background_current and intracellular_ion_concentrations for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between background_muscarinic_potassium_channel_current and intracellular_ion_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K_ACh and i_K_ACh;
  enddef;
  def map between sodium_potassium_pump_current and intracellular_ion_concentrations for
    vars Nai and Nai;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_calcium_exchange_current and intracellular_ion_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Cao and Cao;
    vars Ca_sub and Ca_sub;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between intracellular_calcium_dynamics and intracellular_ion_concentrations for
    vars Ca_rel and Ca_rel;
    vars Ca_up and Ca_up;
    vars Cai and Cai;
    vars Ca_sub and Ca_sub;
    vars j_Ca_dif and j_Ca_dif;
    vars j_up and j_up;
    vars j_rel and j_rel;
    vars j_tr and j_tr;
  enddef;
  def map between calcium_buffering and intracellular_ion_concentrations for
    vars Ca_rel and Ca_rel;
    vars Ca_sub and Ca_sub;
    vars Cai and Cai;
    vars Mgi and Mgi;
    vars TC_tot and TC_tot;
    vars TMC_tot and TMC_tot;
    vars CM_tot and CM_tot;
    vars CQ_tot and CQ_tot;
    vars delta_fCMi and delta_fCMi;
    vars delta_fCMs and delta_fCMs;
    vars delta_fTMC and delta_fTMC;
    vars delta_fTC and delta_fTC;
    vars delta_fCQ and delta_fCQ;
  enddef;
  def map between L_type_calcium_channel_current and L_type_calcium_channel_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_calcium_channel_current and L_type_calcium_channel_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_calcium_channel_current and L_type_calcium_channel_current_fCa_gate for
    vars fCa and fCa;
    vars time and time;
    vars V and V;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between T_type_calcium_channel_current and T_type_calcium_channel_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_calcium_channel_current and T_type_calcium_channel_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapidly_activating_delayed_rectifier_potassium_current and rapidly_activating_delayed_rectifier_potassium_current_pa_gate for
    vars paF and paF;
    vars paS and paS;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapidly_activating_delayed_rectifier_potassium_current and rapidly_activating_delayed_rectifier_potassium_current_pi_gate for
    vars piy and piy;
    vars time and time;
    vars V and V;
  enddef;
  def map between slowly_activating_delayed_rectifier_potassium_current and slowly_activating_delayed_rectifier_potassium_current_n_gate for
    vars n and n;
    vars time and time;
    vars V and V;
  enddef;
  def map between AP_sensitive_currents and AP_sensitive_currents_q_gate for
    vars q and q;
    vars time and time;
    vars V and V;
  enddef;
  def map between AP_sensitive_currents and AP_sensitive_currents_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_inward_current and sustained_inward_current_qa_gate for
    vars qa and qa;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_inward_current and sustained_inward_current_qi_gate for
    vars qi and qi;
    vars time and time;
    vars V and V;
  enddef;
enddef;
