// creator: Family Tran; Given Kenneth; k.tran@auckland.ac.nz; Orgname The University of Auckland
// created: W3CDTF 2009-10-07
// title: The Tran et al. 2010 metabolite-sensitive, thermodynamically-constrained model of cardiac cross-bridge cycling
// comment: This is the CellML description of Tran et al's 2010 metabolite-sensitive, thermodynamically-constrained model of cardiac cross-bridge cycling; FN Catherine Lloyd
// species: Guinea Pig
// bio_entity: Cardiac Myocyte
// reference: subject_type keyword; metabolism; cardiac muscle; ischemia; cross bridge
// reference: Pubmed_id 20338848; Family Tran; Given Kenneth; Family Smith; Given Nicolas; Other P; Family Loiselle; Given Denis; Other S; Family Crampin; Given Edmund; Other J; title A metabolite-sensitive, thermodynamically-constrained model of cardiac cross-bridge cycling: Implications for force development during ischemia; W3CDTF 2010; title Biophysical Journal; volume 98; first_page 267; last_page 276
def model tran_2009 as
  // A metabolite-sensitive, thermodynamically-constrained model of cardiac cross-bridge cycling: Implications for force development during ischemia
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model has been curated, the units are consistent and the model runs in COR and OpenCell to replicate the published results.
  //
  // Model Structure
  //
  // Abstract: We present a metabolically regulated model of cardiac active force generation with which we investigate the effects of ischemia on maximum force production. Our model, based on the Rice et al. (2008) model of cross-bridge kinetics, reproduces many of the observed effects of MgATP, MgADP, Pi and H+ on force development while still retaining the force/length/Ca2+ properties of the original model. We introduce three new parameters to account for the competitive binding of H+ to the Ca2+ binding site on troponin C and the binding of MgADP within the cross-bridge cycle. These parameters along with the Pi and H+ regulatory steps within the cross-bridge cycle were constrained using data from the literature and validated using a range of metabolic and sinusoidal length perturbation protocols. The placement of the MgADP binding step between two strongly-bound and force-generating states leads to the emergence of an unexpected effect on the force-MgADP curve, where the trend of the relationship (positive or negative) depends on the concentrations of the other metabolites and [H+]. The model is used to investigate the sensitivity of maximum force production to changes in metabolite concentrations during the development of ischemia.
  //
  // The original paper reference is cited below:
  //
  // A metabolite-sensitive, thermodynamically-constrained model of cardiac cross-bridge cycling: Implications for force development during ischemia, Kenneth Tran, Nicolas P. Smith, Denis S. Loiselle and Edmund J. Crampin, 2010, Biophysical Journal, 98, 267-276. PubMed ID: 20338848 (http://www.ncbi.nlm.nih.gov/pubmed/20338848)
  //
  // model diagram
  //
  // Schematic diagram of the Tran et al. 2010 model. The original model from Rice et al. 2008 has been modified to include metabolite dependence
  def unit unit_normalised_force as
    unit dimensionless;
  enddef;
  def unit unit_normalised_force_millisecond as
    unit unit_normalised_force;
    unit millisecond;
  enddef;
  def unit unit_normalised_force_millisecond_per_micrometre as
    unit unit_normalised_force;
    unit millisecond;
    unit micrometre {expo: -1};
  enddef;
  def unit unit_normalised_force_per_micrometre as
    unit unit_normalised_force;
    unit micrometre {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_micrometre as
    unit micrometre {expo: -1};
  enddef;
  def unit micrometre_per_millisecond as
    unit micrometre;
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_micrometre as
    unit millisecond;
    unit micrometre {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millisecond2_per_micrometre as
    unit millisecond {expo: 2};
    unit micrometre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit micromolar2 as
    unit micromolar {expo: 2};
  enddef;
  def unit micromolar_per_millisecond as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit millisecond {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millinewton_per_millimetre2 as
    unit newton {pref: milli};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit millinewton_per_millimetre2_per_millisecond as
    unit newton {pref: milli};
    unit metre {expo: -2, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp sarcomere_geometry as
    var SOVFThick: dimensionless {pub: out};
    var SOVFThin: dimensionless {pub: out};
    var sovr_ze: micrometre;
    var sovr_cle: micrometre;
    var len_sovr: micrometre;
    var len_thin: micrometre {pub: in};
    var len_thick: micrometre {pub: in};
    var len_hbare: micrometre {pub: in};
    var SL: micrometre {pub: in};
    sovr_ze = sel
      case len_thick/2{dimensionless} < SL/2{dimensionless}:
        len_thick/2{dimensionless};
      otherwise:
        SL/2{dimensionless};
    endsel;
    sovr_cle = sel
      case SL/2{dimensionless}-(SL-len_thin) > len_hbare/2{dimensionless}:
        SL/2{dimensionless}-(SL-len_thin);
      otherwise:
        len_hbare/2{dimensionless};
    endsel;
    len_sovr = sovr_ze-sovr_cle;
    SOVFThick = len_sovr*2{dimensionless}/(len_thick-len_hbare);
    SOVFThin = len_sovr/len_thin;
  enddef;

  def comp Ca_binding_to_troponin_to_thin_filament_regulation as
    var TRPNCaL: dimensionless {init: 0.0147730085063734, pub: out};
    var TRPNCaH: dimensionless {init: 0.13066096561522, pub: out};
    var dTRPNCaL: first_order_rate_constant {pub: out};
    var dTRPNCaH: first_order_rate_constant {pub: out};
    var kn_pT: first_order_rate_constant {pub: out};
    var kp_nT: first_order_rate_constant {pub: out};
    var H: micromolar {pub: out};
    var H_cons: micromolar {pub: out};
    var konT: second_order_rate_constant;
    var koffLT: first_order_rate_constant;
    var koffHT: first_order_rate_constant;
    var Qkon: dimensionless {init: 1.5};
    var Qkoff: dimensionless {init: 1.3};
    var Qkn_p: dimensionless {init: 1.6};
    var Qkp_n: dimensionless {init: 1.6};
    var kon: second_order_rate_constant {init: 0.05};
    var koffL: first_order_rate_constant {init: 0.25};
    var koffH: first_order_rate_constant {init: 0.025};
    var perm50: dimensionless {init: 0.5};
    var nperm: dimensionless {init: 15};
    var kn_p: first_order_rate_constant {init: 0.5};
    var kp_n: first_order_rate_constant {init: 0.05};
    var koffmod: dimensionless {init: 1};
    var Tropreg: dimensionless;
    var permtot: dimensionless;
    var inprmt: dimensionless;
    var pH: dimensionless {init: 7.15};
    var m: dimensionless {init: 1};
    var kdHCa: micromolar {init: 2e-2};
    var time: millisecond {pub: in};
    var TmpC: kelvin {pub: in};
    var Cai: micromolar {pub: in};
    var SOVFThin: dimensionless {pub: in};
    konT = (pow(kdHCa, m)+pow(H_cons, m))/(pow(kdHCa, m)+pow(H, m))*kon*pow(Qkon, (TmpC-310{kelvin})/10{kelvin});
    H = 10e6{micromolar}*pow(10{dimensionless}, -pH);
    H_cons = 10e6{micromolar}*pow(10{dimensionless}, -7.15{dimensionless});
    koffLT = koffL*koffmod*pow(Qkoff, (TmpC-310{kelvin})/10{kelvin});
    koffHT = koffH*koffmod*pow(Qkoff, (TmpC-310{kelvin})/10{kelvin});
    kn_pT = kn_p*permtot*pow(Qkn_p, (TmpC-310{kelvin})/10{kelvin});
    kp_nT = kp_n*inprmt*pow(Qkp_n, (TmpC-310{kelvin})/10{kelvin});
    permtot = sqrt(abs(1{dimensionless}/(1{dimensionless}+pow(perm50/Tropreg, nperm))));
    inprmt = sel
      case 1{dimensionless}/permtot < 100{dimensionless}:
        1{dimensionless}/permtot;
      otherwise:
        100{dimensionless};
    endsel;
    ode(TRPNCaL, time) = dTRPNCaL;
    dTRPNCaL = konT*Cai*(1{dimensionless}-TRPNCaL)-koffLT*TRPNCaL;
    ode(TRPNCaH, time) = dTRPNCaH;
    dTRPNCaH = konT*Cai*(1{dimensionless}-TRPNCaH)-koffHT*TRPNCaH;
    Tropreg = (1{dimensionless}-SOVFThin)*TRPNCaL+SOVFThin*TRPNCaH;
  enddef;

  def comp thin_filament_regulation_and_crossbridge_cycling_rates as
    var fappT: first_order_rate_constant {pub: out};
    var gappT: first_order_rate_constant {pub: out};
    var hfT: first_order_rate_constant {pub: out};
    var hbT: first_order_rate_constant {pub: out};
    var gxbT: first_order_rate_constant {pub: out};
    var fapp: first_order_rate_constant {init: 0.5, pub: out};
    var gapp: first_order_rate_constant {init: 0.07, pub: out};
    var hf: first_order_rate_constant {init: 2, pub: out};
    var hb: first_order_rate_constant {init: 0.4, pub: out};
    var gxb: first_order_rate_constant {init: 0.07, pub: out};
    var gslmod: dimensionless {init: 6};
    var hfmd: dimensionless;
    var hbmd: dimensionless;
    var hfmdc: dimensionless {init: 5};
    var hbmdc: dimensionless {init: 0};
    var sigmap: dimensionless {init: 8};
    var sigman: dimensionless {init: 1};
    var xbmodsp: dimensionless {init: 0.2};
    var Qfapp: dimensionless {init: 6.25};
    var Qgapp: dimensionless {init: 2.5};
    var Qhf: dimensionless {init: 6.25};
    var Qhb: dimensionless {init: 6.25};
    var Qgxb: dimensionless {init: 6.25};
    var gxbmd: dimensionless;
    var gapslmd: dimensionless;
    var x_0: micrometre {pub: in};
    var TmpC: kelvin {pub: in};
    var SOVFThick: dimensionless {pub: in};
    var xXBpostr: micrometre {pub: in};
    var xXBprer: micrometre {pub: in};
    fappT = fapp*xbmodsp*pow(Qfapp, (TmpC-310{kelvin})/10{kelvin});
    gapslmd = 1{dimensionless}+(1{dimensionless}-SOVFThick)*gslmod;
    gappT = gapp*gapslmd*xbmodsp*pow(Qgapp, (TmpC-310{kelvin})/10{kelvin});
    hfmd = exp(-xXBprer/abs(xXBprer)*hfmdc*sqr(xXBprer/x_0));
    // hbmd = exp((xXBpostr-x_0)/abs(xXBpostr-x_0)*hbmdc*sqr((xXBpostr-x_0)/x_0));
    hbmd = 1{dimensionless};
    hfT = hf*hfmd*xbmodsp*pow(Qhf, (TmpC-310{kelvin})/10{kelvin});
    hbT = hb*hbmd*xbmodsp*pow(Qhb, (TmpC-310{kelvin})/10{kelvin});
    gxbmd = sel
      case xXBpostr < x_0:
        exp(sigmap*sqr((x_0-xXBpostr)/x_0));
      otherwise:
        exp(sigman*sqr((xXBpostr-x_0)/x_0));
    endsel;
    gxbT = gxb*gxbmd*xbmodsp*pow(Qgxb, (TmpC-310{kelvin})/10{kelvin});
  enddef;

  def comp regulation_and_crossbridge_cycling_state_equations as
    var XBpostr: dimensionless {init: 1.81017564383744e-6, pub: out};
    var XBprer: dimensionless {init: 3.0494964880038e-7, pub: out};
    var dXBpostr: first_order_rate_constant {pub: out};
    var dXBprer: first_order_rate_constant {pub: out};
    var alpha1_plus: first_order_rate_constant {pub: out};
    var alpha2_plus: first_order_rate_constant {pub: out};
    var alpha3_plus: first_order_rate_constant {pub: out};
    var alpha1_minus: first_order_rate_constant {pub: out};
    var alpha2_minus: first_order_rate_constant {pub: out};
    var alpha3_minus: first_order_rate_constant {pub: out};
    var kMgATP: micromolar2 {init: 15400e6, pub: out};
    var kdADP: micromolar {init: 4, pub: out};
    var xPi_cons: micromolar {init: 2e3, pub: out};
    var MgATP_cons: micromolar {init: 5e3, pub: out};
    var fxbT: first_order_rate_constant;
    var N_NoXB: dimensionless {init: 0.999999959256274};
    var P_NoXB: dimensionless {init: 4.07437173988636e-8};
    var P: dimensionless {init: 0.999997834540066};
    var N: dimensionless;
    var MgADP_cons: micromolar {init: 36};
    var xPi: micromolar {init: 2e3};
    var MgATP: micromolar {init: 5e3};
    var MgADP: micromolar {init: 36.3};
    var time: millisecond {pub: in};
    var fappT: first_order_rate_constant {pub: in};
    var gappT: first_order_rate_constant {pub: in};
    var hfT: first_order_rate_constant {pub: in};
    var hbT: first_order_rate_constant {pub: in};
    var gxbT: first_order_rate_constant {pub: in};
    var kn_pT: first_order_rate_constant {pub: in};
    var kp_nT: first_order_rate_constant {pub: in};
    var H: micromolar {pub: in};
    var H_cons: micromolar {pub: in};
    ode(N_NoXB, time) = kp_nT*P_NoXB-kn_pT*N_NoXB;
    ode(P_NoXB, time) = kn_pT*N_NoXB-kp_nT*P_NoXB;
    N = 1{dimensionless}-(P+XBprer+XBpostr);
    ode(P, time) = kn_pT*N-(kp_nT+alpha1_plus)*P;
    ode(XBprer, time) = dXBprer;
    dXBprer = alpha1_plus*P+alpha2_minus*XBpostr-(alpha1_minus+alpha2_plus)*XBprer;
    ode(XBpostr, time) = dXBpostr;
    dXBpostr = alpha3_minus*P+alpha2_plus*XBprer-(alpha2_minus+alpha3_plus)*XBpostr;
    alpha1_plus = fappT;
    alpha2_plus = hfT;
    alpha3_plus = MgATP*gxbT/MgATP_cons*(kdADP+MgADP_cons)/(kdADP+MgADP);
    alpha1_minus = xPi*gappT/xPi_cons;
    alpha2_minus = H*hbT/H_cons*(kdADP+MgADP_cons)/MgADP_cons*MgADP/(kdADP+MgADP);
    alpha3_minus = fxbT;
    fxbT = kdADP*fappT*hfT*gxbT/MgATP_cons/(gappT/xPi_cons*hbT/H_cons*kMgATP);
  enddef;

  def comp mean_strain_of_strongly_bound_states as
    var xXBpostr: micrometre {init: 0.00700005394873882, pub: out};
    var xXBprer: micrometre {init: 3.41212828972468e-8, pub: out};
    var dxXBpostr: micrometre_per_millisecond {pub: out};
    var dxXBprer: micrometre_per_millisecond {pub: out};
    var xPsi: dimensionless {init: 2};
    var dutyprer: dimensionless;
    var dutypostr: dimensionless;
    var time: millisecond {pub: in};
    var alpha1_plus: first_order_rate_constant {pub: in};
    var alpha2_plus: first_order_rate_constant {pub: in};
    var alpha3_plus: first_order_rate_constant {pub: in};
    var alpha1_minus: first_order_rate_constant {pub: in};
    var alpha2_minus: first_order_rate_constant {pub: in};
    var alpha3_minus: first_order_rate_constant {pub: in};
    var dSL: micrometre_per_millisecond {pub: in};
    var x_0: micrometre {pub: in};
    var fappT: first_order_rate_constant {pub: in};
    var gappT: first_order_rate_constant {pub: in};
    var hfT: first_order_rate_constant {pub: in};
    var hbT: first_order_rate_constant {pub: in};
    var gxbT: first_order_rate_constant {pub: in};
    ode(xXBprer, time) = dxXBprer;
    dxXBprer = dSL/2{dimensionless}+xPsi/dutyprer*(-alpha1_plus*xXBprer+alpha2_minus*(xXBpostr-(x_0+xXBprer)));
    ode(xXBpostr, time) = dxXBpostr;
    dxXBpostr = dSL/2{dimensionless}+xPsi/dutypostr*alpha2_plus*(xXBprer+x_0-xXBpostr);
    dutyprer = (alpha3_minus*alpha2_minus+alpha3_plus*alpha1_plus+alpha2_minus*alpha1_plus)/(alpha1_plus*alpha2_plus+alpha3_minus*alpha1_minus+alpha3_minus*alpha2_plus+alpha3_minus*alpha2_minus+alpha3_plus*alpha1_plus+alpha2_minus*alpha1_plus+alpha2_plus*alpha3_plus+alpha3_minus*alpha1_minus+alpha3_plus*alpha1_minus);
    dutypostr = (alpha1_plus*alpha2_plus+alpha3_minus*alpha1_minus+alpha3_minus*alpha2_plus)/(alpha1_plus*alpha2_plus+alpha3_minus*alpha1_minus+alpha3_minus*alpha2_plus+alpha3_minus*alpha2_minus+alpha3_plus*alpha1_plus+alpha2_minus*alpha1_plus+alpha2_plus*alpha3_plus+alpha3_minus*alpha1_minus+alpha3_plus*alpha1_minus);
  enddef;

  def comp normalised_active_and_passive_force as
    var SSXBpostr: dimensionless {pub: out};
    var SSXBprer: dimensionless {pub: out};
    var dSL: micrometre_per_millisecond {pub: out};
    var SL: micrometre {init: 2.2, pub: out};
    var ppforce: unit_normalised_force;
    var ppforce_t: unit_normalised_force;
    var ppforce_c: unit_normalised_force;
    var preload: unit_normalised_force;
    var afterload: unit_normalised_force;
    var intf: unit_normalised_force_millisecond {init: -4.5113452510363e-6};
    var SL_c: micrometre {init: 2.25};
    var SLrest: micrometre {init: 1.85};
    var SLset: micrometre {init: 1.9};
    var PCon_t: unit_normalised_force {init: 0.002};
    var PExp_t: per_micrometre {init: 10};
    var PCon_c: unit_normalised_force {init: 0.02};
    var PExp_c: per_micrometre {init: 70};
    var KSE: unit_normalised_force_per_micrometre {init: 1};
    var fxb: first_order_rate_constant;
    var MgATP_cons: micromolar {pub: in};
    var xPi_cons: micromolar {pub: in};
    var H_cons: micromolar {pub: in};
    var kMgATP: micromolar2 {pub: in};
    var kdADP: micromolar {pub: in};
    var x_0: micrometre {pub: in};
    var fapp: first_order_rate_constant {pub: in};
    var gapp: first_order_rate_constant {pub: in};
    var hf: first_order_rate_constant {pub: in};
    var hb: first_order_rate_constant {pub: in};
    var gxb: first_order_rate_constant {pub: in};
    var time: millisecond {pub: in};
    var fappT: first_order_rate_constant {pub: in};
    var gappT: first_order_rate_constant {pub: in};
    var hfT: first_order_rate_constant {pub: in};
    var hbT: first_order_rate_constant {pub: in};
    var gxbT: first_order_rate_constant {pub: in};
    var XBpostr: dimensionless {pub: in};
    var XBprer: dimensionless {pub: in};
    var xXBpostr: micrometre {pub: in};
    var xXBprer: micrometre {pub: in};
    var SOVFThick: dimensionless {pub: in};
    var SEon: dimensionless {init: 1};
    var F_active: unit_normalised_force;
    fxb = kdADP*fapp*hf*gxb/MgATP_cons/(gapp/xPi_cons*hb/H_cons*kMgATP);
    SSXBprer = (fxb*hb+gxb*fapp+hbT*fapp)/(hf*gxb+hb*gapp+gxb*gapp+fxb*hb+gxb*fapp+hb*fapp+fxb*gapp+fapp*hf+fxb*hb);
    SSXBpostr = (fapp*hf+fxb*gapp+fxb*hb)/(hf*gxb+hb*gapp+gxb*gapp+fxb*hb+gxb*fapp+hb*fapp+fxb*gapp+fapp*hf+fxb*hb);
    F_active = SOVFThick*(xXBpostr*XBpostr+xXBprer*XBprer)/(x_0*SSXBpostr);
    ppforce_t = (SL-SLrest)/abs(SL-SLrest)*PCon_t*(exp(PExp_t*abs(SL-SLrest))-1{dimensionless});
    ppforce_c = sel
      case SL > SL_c:
        PCon_c*(exp(PExp_c*abs(SL-SL_c))-1{dimensionless});
      otherwise:
        0{unit_normalised_force};
    endsel;
    ppforce = ppforce_t+ppforce_c;
    preload = abs(SLset-SLrest)/(SLset-SLrest)*PCon_t*(exp(PExp_t*abs(SLset-SLrest))-1{dimensionless});
    afterload = sel
      case SEon == 1{dimensionless}:
        KSE*(SLset-SL);
      otherwise:
        0{unit_normalised_force};
    endsel;
    ode(SL, time) = dSL;
    dSL = 0{micrometre_per_millisecond};
    ode(intf, time) = preload+afterload-(ppforce+F_active);
  enddef;

  def comp calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding as
    var FrSBXB: dimensionless;
    var dFrSBXB: first_order_rate_constant;
    var dsovr_ze: micrometre_per_millisecond;
    var dsovr_cle: micrometre_per_millisecond;
    var dlen_sovr: micrometre_per_millisecond;
    var dSOVFThick: first_order_rate_constant;
    var dSOVFThin: first_order_rate_constant;
    var Trop_conc: micromolar {init: 70};
    var TropTot: micromolar;
    var dTropTot: micromolar_per_millisecond;
    var dSL: micrometre_per_millisecond {pub: in};
    var SL: micrometre {pub: in};
    var dXBpostr: first_order_rate_constant {pub: in};
    var dXBprer: first_order_rate_constant {pub: in};
    var dxXBpostr: micrometre_per_millisecond {pub: in};
    var dxXBprer: micrometre_per_millisecond {pub: in};
    var XBpostr: dimensionless {pub: in};
    var XBprer: dimensionless {pub: in};
    var xXBpostr: micrometre {pub: in};
    var xXBprer: micrometre {pub: in};
    var SSXBpostr: dimensionless {pub: in};
    var SSXBprer: dimensionless {pub: in};
    var SOVFThick: dimensionless {pub: in};
    var SOVFThin: dimensionless {pub: in};
    var len_thin: micrometre {pub: in};
    var len_thick: micrometre {pub: in};
    var len_hbare: micrometre {pub: in};
    var TRPNCaL: dimensionless {pub: in};
    var TRPNCaH: dimensionless {pub: in};
    var dTRPNCaL: first_order_rate_constant {pub: in};
    var dTRPNCaH: first_order_rate_constant {pub: in};
    FrSBXB = (XBpostr+XBprer)/(SSXBpostr+SSXBprer);
    dFrSBXB = (dXBpostr+dXBprer)/(SSXBpostr+SSXBprer);
    dsovr_ze = sel
      case SL < len_thick:
        -0.5{dimensionless}*dSL;
      otherwise:
        0{micrometre_per_millisecond};
    endsel;
    dsovr_cle = sel
      case 2{dimensionless}*len_thin-SL > len_hbare:
        -0.5{dimensionless}*dSL;
      otherwise:
        0{micrometre_per_millisecond};
    endsel;
    dlen_sovr = dsovr_ze-dsovr_cle;
    dSOVFThin = dlen_sovr/len_thin;
    dSOVFThick = 2{dimensionless}*dlen_sovr/(len_thick-len_hbare);
    TropTot = Trop_conc*((1{dimensionless}-SOVFThin)*TRPNCaL+SOVFThin*(FrSBXB*TRPNCaH+(1{dimensionless}-FrSBXB)*TRPNCaL));
    dTropTot = Trop_conc*(-dSOVFThin*TRPNCaL+(1{dimensionless}-SOVFThin)*dTRPNCaL+dSOVFThin*(FrSBXB*TRPNCaH+(1{dimensionless}-FrSBXB)*TRPNCaL)+SOVFThin*(dFrSBXB*TRPNCaH+FrSBXB*dTRPNCaH+(1{dimensionless}-FrSBXB)*dTRPNCaL-dFrSBXB*TRPNCaL));
  enddef;

  def comp model_parameters as
    var Cai: micromolar {init: 200.0, pub: out};
    var len_thin: micrometre {init: 1.2, pub: out};
    var len_thick: micrometre {init: 1.65, pub: out};
    var len_hbare: micrometre {init: 0.1, pub: out};
    var TmpC: kelvin {init: 299, pub: out};
    var x_0: micrometre {init: 0.007, pub: out};
  enddef;
  def map between Ca_binding_to_troponin_to_thin_filament_regulation and environment for
    vars time and time;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and environment for
    vars time and time;
  enddef;
  def map between mean_strain_of_strongly_bound_states and environment for
    vars time and time;
  enddef;
  def map between normalised_active_and_passive_force and environment for
    vars time and time;
  enddef;
  def map between sarcomere_geometry and normalised_active_and_passive_force for
    vars SL and SL;
    vars SOVFThick and SOVFThick;
  enddef;
  def map between sarcomere_geometry and model_parameters for
    vars len_thin and len_thin;
    vars len_thick and len_thick;
    vars len_hbare and len_hbare;
  enddef;
  def map between Ca_binding_to_troponin_to_thin_filament_regulation and model_parameters for
    vars TmpC and TmpC;
    vars Cai and Cai;
  enddef;
  def map between Ca_binding_to_troponin_to_thin_filament_regulation and sarcomere_geometry for
    vars SOVFThin and SOVFThin;
  enddef;
  def map between thin_filament_regulation_and_crossbridge_cycling_rates and model_parameters for
    vars x_0 and x_0;
    vars TmpC and TmpC;
  enddef;
  def map between thin_filament_regulation_and_crossbridge_cycling_rates and sarcomere_geometry for
    vars SOVFThick and SOVFThick;
  enddef;
  def map between thin_filament_regulation_and_crossbridge_cycling_rates and mean_strain_of_strongly_bound_states for
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
    vars fappT and fappT;
    vars gappT and gappT;
    vars hfT and hfT;
    vars hbT and hbT;
    vars gxbT and gxbT;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and thin_filament_regulation_and_crossbridge_cycling_rates for
    vars fappT and fappT;
    vars gappT and gappT;
    vars hfT and hfT;
    vars hbT and hbT;
    vars gxbT and gxbT;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and Ca_binding_to_troponin_to_thin_filament_regulation for
    vars kn_pT and kn_pT;
    vars kp_nT and kp_nT;
    vars H and H;
    vars H_cons and H_cons;
  enddef;
  def map between mean_strain_of_strongly_bound_states and model_parameters for
    vars x_0 and x_0;
  enddef;
  def map between normalised_active_and_passive_force and thin_filament_regulation_and_crossbridge_cycling_rates for
    vars fapp and fapp;
    vars gapp and gapp;
    vars hf and hf;
    vars hb and hb;
    vars gxb and gxb;
    vars fappT and fappT;
    vars gappT and gappT;
    vars hfT and hfT;
    vars hbT and hbT;
    vars gxbT and gxbT;
  enddef;
  def map between normalised_active_and_passive_force and regulation_and_crossbridge_cycling_state_equations for
    vars XBpostr and XBpostr;
    vars XBprer and XBprer;
    vars kMgATP and kMgATP;
    vars kdADP and kdADP;
    vars xPi_cons and xPi_cons;
    vars MgATP_cons and MgATP_cons;
  enddef;
  def map between normalised_active_and_passive_force and mean_strain_of_strongly_bound_states for
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
    vars dSL and dSL;
  enddef;
  def map between normalised_active_and_passive_force and Ca_binding_to_troponin_to_thin_filament_regulation for
    vars H_cons and H_cons;
  enddef;
  def map between normalised_active_and_passive_force and model_parameters for
    vars x_0 and x_0;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and model_parameters for
    vars len_thin and len_thin;
    vars len_thick and len_thick;
    vars len_hbare and len_hbare;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and Ca_binding_to_troponin_to_thin_filament_regulation for
    vars TRPNCaL and TRPNCaL;
    vars TRPNCaH and TRPNCaH;
    vars dTRPNCaL and dTRPNCaL;
    vars dTRPNCaH and dTRPNCaH;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and regulation_and_crossbridge_cycling_state_equations for
    vars XBpostr and XBpostr;
    vars XBprer and XBprer;
    vars dXBpostr and dXBpostr;
    vars dXBprer and dXBprer;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and mean_strain_of_strongly_bound_states for
    vars alpha1_plus and alpha1_plus;
    vars alpha2_plus and alpha2_plus;
    vars alpha3_plus and alpha3_plus;
    vars alpha1_minus and alpha1_minus;
    vars alpha2_minus and alpha2_minus;
    vars alpha3_minus and alpha3_minus;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and mean_strain_of_strongly_bound_states for
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
    vars dxXBpostr and dxXBpostr;
    vars dxXBprer and dxXBprer;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and normalised_active_and_passive_force for
    vars SSXBpostr and SSXBpostr;
    vars SSXBprer and SSXBprer;
    vars SL and SL;
    vars dSL and dSL;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and sarcomere_geometry for
    vars SOVFThin and SOVFThin;
    vars SOVFThick and SOVFThick;
  enddef;
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "tran_2009", which is
  // declared on the <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  // Keyword(s)
enddef;
