// This CellML file was generated on 25/10/2010 at 14:36:09 using:
//
// COR (0.9.31.1393)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
def model viswanathan_1999_endo as
  // Updated Luo-Rudy Mammalian Ventricular Model II
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This version was created by Penny Noble of Oxford University and is known to run in PCEnv and COR. This is the ENDOCARDIAL CELL VARIANT of the model.
  //
  // Model Structure
  //
  // ABSTRACT: BACKGROUND: A growing body of evidence suggests that heterogeneity of ion channel expression and electrophysiological characteristics is an important property of the ventricular myocardium. The 2 components of the delayed rectifier potassium current, IKr (rapid) and IKs (slow), play a dominant role in the repolarization of the action potential and are important determinants of its duration. METHODS AND RESULTS: In this report, the effects of heterogeneities of IKr and IKs on action potential duration (APD) and its rate dependence (adaptation) are studied with the use of the LRd model of a mammalian ventricular cell. Results demonstrate the importance of IKs density variations in heterogeneity of repolarization. Cells with reduced IKs (eg, mid-myocardial M cells) display long APD and steep dependence of APD on rate. Mechanistically, accumulation of IKs activation and increased sodium calcium exchange current, INaCa, secondary to Na+ accumulation at a fast rate underlie the steep APD-rate relation of these cells. When cells are electrotonically coupled in a multicellular fiber through resistive gap junction, APD differences are reduced. The results demonstrate strong dependence of APD heterogeneity on the degree of intercellular coupling even in the normal physiological range. Highly reduced coupling maximizes APD heterogeneity. CONCLUSIONS: Heterogeneity of IKs:IKr density strongly influences APD and its rate dependence. However, in the intact myocardium, the degree of gap-junction coupling may be an important factor that determines the manifestation of APD heterogeneity and dispersion of repolarization. The clinical significance of this study is in the context of repolarization abnormalities and associated arrhythmias (eg, long QT syndrome and torsade de pointes).
  //
  // The complete paper reference is cited below:
  //
  // Effects of IKr and IKs heterogeneity on action potential duration and its rate dependence: a simulation study, Prakash C. Viswanathan, BE; Robin M. Shaw, PhD; and Yoram Rudy, PhD, 1999, Circulation, 99, 2466-2474. PubMed ID: 10318671 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=10318671&dopt=Abstract)
  //
  // cell diagram of the shaw and viswanathan models showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram of the 1999 Viswanathan et al. model.
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit ms_per_millivolt as
    unit ms;
    unit per_millivolt;
  enddef;
  def unit per_millivolt_ms as
    unit per_millivolt;
    unit per_ms;
  enddef;
  def unit millivolt_per_ms as
    unit millivolt;
    unit per_ms;
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit nanoS_per_cm2 as
    unit siemens {pref: nano};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit microF;
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit millimolar_per_ms as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit per_ms;
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM4 as
    unit millimolar {expo: 4};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;
  def unit litre_per_farad_ms as
    unit litre;
    unit farad {expo: -1};
    unit per_ms;
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0042391
  def comp membrane as
    var V: millivolt {init: -88.984, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var I_st: microA_per_microF;
    var time: ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Ca_L: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_T: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_K_ATP: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_K1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_Kp: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Ca_b: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_ns_Ca: microA_per_microF {pub: in};
    var dVdt: millivolt_per_ms {pub: out};
    var stim_start: ms {init: 100};
    var stim_end: ms {init: 99999000};
    var stim_period: ms {init: 1000};
    var stim_duration: ms {init: 2};
    var stim_amplitude: microA_per_microF {init: -25.5};
    I_st = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    ode(V, time) = dVdt;
    dVdt = -(i_Na+i_Ca_L+i_Ca_T+i_Kr+i_Ks+i_K_ATP+i_to+i_K1+i_Kp+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_NaCa+i_ns_Ca+I_st);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_Na: milliS_per_microF {init: 16};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    E_Na = R*T/F*ln(Nao/Nai);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.00079287, pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: millivolt {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    var time: ms {pub: in};
    E0_m = V+47.13{millivolt};
    alpha_m = sel
      case abs(E0_m) >= delta_m:
        0.32{per_millivolt_ms}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
      otherwise:
        3.2{per_ms};
    endsel;
    beta_m = 0.08{per_ms}*exp(-V/11{millivolt});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.992806, pub: out};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_ms}*exp((80{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0{per_ms};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_ms}*exp(0.079{per_millivolt}*V)+310000{per_ms}*exp(0.35{per_millivolt}*V);
      otherwise:
        1{dimensionless}/(0.13{ms}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 0.99511469, pub: out};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        -(127140{per_millivolt_ms}*exp(0.2444{per_millivolt}*V)+3.474e-5{per_millivolt_ms}*exp(-0.04391{per_millivolt}*V))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_ms};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_ms}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_ms}*exp(-2.535e-7{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    ode(j, time) = alpha_j*(1{dimensionless}-j)-beta_j*j;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0048763
    var i_CaCa: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_CaK: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_CaNa: microA_per_microF {pub: out};
    var gamma_Nai: dimensionless {init: 0.75, pub: out};
    var gamma_Nao: dimensionless {init: 0.75, pub: out};
    var gamma_Ki: dimensionless {init: 0.75, pub: out};
    var gamma_Ko: dimensionless {init: 0.75, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_CaCa: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_CaK: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var I_CaNa: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var P_Ca: litre_per_farad_ms {init: 0.00054};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var P_Na: litre_per_farad_ms {init: 6.75e-7};
    var P_K: litre_per_farad_ms {init: 1.93e-7};
    var gamma_Cai: dimensionless {init: 1};
    var gamma_Cao: dimensionless {init: 0.341};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cai: millimolar {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    I_CaCa = P_Ca*sqr(2{dimensionless})*V*sqr(F)/(R*T)*(gamma_Cai*Cai*exp(2{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_CaNa = P_Na*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_CaK = P_K*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_CaCa = d*f*f_Ca*I_CaCa;
    i_CaNa = d*f*f_Ca*I_CaNa;
    i_CaK = d*f*f_Ca*I_CaK;
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 3.538268e-6, pub: out};
    var alpha_d: per_ms;
    var beta_d: per_ms;
    var d_infinity: dimensionless;
    var tau_d: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    var E0_d: millivolt;
    E0_d = V+10{millivolt};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-E0_d/6.24{millivolt}));
    tau_d = sel
      case abs(E0_d) < 1e-5{millivolt}:
        1{dimensionless}/(0.035{per_millivolt_ms}*6.24{millivolt});
      otherwise:
        d_infinity*(1{dimensionless}-exp(-E0_d/6.24{millivolt}))/(0.035{per_millivolt_ms}*E0_d);
    endsel;
    alpha_d = d_infinity/tau_d;
    beta_d = (1{dimensionless}-d_infinity)/tau_d;
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 0.995259, pub: out};
    var alpha_f: per_ms;
    var beta_f: per_ms;
    var f_infinity: dimensionless;
    var tau_f: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+32{millivolt})/8{millivolt}))+0.6{dimensionless}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_f = 1{ms}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_millivolt}*(V+10{millivolt})))+0.02{dimensionless});
    alpha_f = f_infinity/tau_f;
    beta_f = (1{dimensionless}-f_infinity)/tau_f;
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: millimolar {init: 0.0006};
    var V: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    f_Ca = 1{dimensionless}/(1{dimensionless}+Cai/Km_Ca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Ca_T: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var g_CaT: milliS_per_microF {init: 0.05};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var E_Ca: millivolt {pub: in};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var b: dimensionless {priv: in};
    var g: dimensionless {priv: in};
    i_Ca_T = g_CaT*b*b*g*(V-E_Ca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel_b_gate as
    var b: dimensionless {init: 0.0010301, pub: out};
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    var b_inf: dimensionless;
    var tau_b: ms;
    b_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+14{millivolt})/10.8{millivolt}));
    tau_b = 3.7{ms}+6.1{ms}/(1{dimensionless}+exp((V+25{millivolt})/4.5{millivolt}));
    ode(b, time) = (b_inf-b)/tau_b;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel_g_gate as
    var g: dimensionless {init: 0.9341828, pub: out};
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    var g_inf: dimensionless;
    var tau_g: ms;
    g_inf = 1{dimensionless}/(1{dimensionless}+exp((V+60{millivolt})/5.6{millivolt}));
    tau_g = sel
      case V <= 0{millivolt}:
        -0.875{ms_per_millivolt}*V+12{ms};
      otherwise:
        12{ms};
    endsel;
    ode(g, time) = (g_inf-g)/tau_g;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_delayed_rectifier_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_Kr: milliS_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Rect: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_K: millivolt {pub: in};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var xr: dimensionless {priv: in};
    g_Kr = 0.02614{milliS_per_microF}*sqrt(Ko/5.4{millimolar});
    Rect = 1{dimensionless}/(1{dimensionless}+exp((V+9{millivolt})/22.4{millivolt}));
    i_Kr = g_Kr*xr*Rect*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_delayed_rectifier_potassium_current_xr_gate as
    var xr: dimensionless {init: 0.0007500578, pub: out};
    var xr_infinity: dimensionless;
    var tau_xr: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    xr_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+21.5{millivolt})/7.5{millivolt}));
    tau_xr = 1{ms}/(0.00138{per_millivolt}*(V+14.2{millivolt})/(1{dimensionless}-exp(-0.123{per_millivolt}*(V+14.2{millivolt})))+0.00061{per_millivolt}*(V+38.9{millivolt})/(exp(0.145{per_millivolt}*(V+38.9{millivolt}))-1{dimensionless}));
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp slow_delayed_rectifier_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_Ks: milliS_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_Ks: millivolt;
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var PNaK: dimensionless {init: 0.01833};
    var time: ms {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var xs1: dimensionless {priv: in};
    var xs2: dimensionless {priv: in};
    E_Ks = R*T/F*ln((Ko+PNaK*Nao)/(Ki+PNaK*Nai));
    g_Ks = 0.433{milliS_per_microF}*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/Cai, 1.4{dimensionless})));
    i_Ks = g_Ks*xs1*xs2*(V-E_Ks);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp slow_delayed_rectifier_potassium_current_xs1_gate as
    var xs1: dimensionless {init: 0.0421517, pub: out};
    var xs1_infinity: dimensionless;
    var tau_xs1: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    xs1_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{millivolt})/16.7{millivolt}));
    tau_xs1 = 1{ms}/(7.19e-5{per_millivolt}*(V+30{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V+30{millivolt})))+0.000131{per_millivolt}*(V+30{millivolt})/(exp(0.0687{per_millivolt}*(V+30{millivolt}))-1{dimensionless}));
    ode(xs1, time) = (xs1_infinity-xs1)/tau_xs1;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0005251
  // isVersionOf: http://identifiers.org/go/GO:0019870
  def comp slow_delayed_rectifier_potassium_current_xs2_gate as
    var xs2: dimensionless {init: 0.08866, pub: out};
    var xs2_infinity: dimensionless;
    var tau_xs2: ms;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    xs2_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{millivolt})/16.7{millivolt}));
    tau_xs2 = 4{ms}/(7.19e-5{per_millivolt}*(V+30{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V+30{millivolt})))+0.000131{per_millivolt}*(V+30{millivolt})/(exp(0.0687{per_millivolt}*(V+30{millivolt}))-1{dimensionless}));
    ode(xs2, time) = (xs2_infinity-xs2)/tau_xs2;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0022841
  def comp time_independent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var i_K1: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var E_K: millivolt {priv: out, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var g_K1: milliS_per_microF;
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = 0.75{milliS_per_microF}*sqrt(Ko/5.4{millimolar});
    E_K = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0022841
  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    alpha_K1 = 1.02{per_ms}/(1{dimensionless}+exp(0.2385{per_millivolt}*(V-E_K-59.215{millivolt})));
    beta_K1 = 1{per_ms}*(0.49124{dimensionless}*exp(0.08032{per_millivolt}*(V-E_K+5.476{millivolt}))+exp(0.06175{per_millivolt}*(V-E_K-594.31{millivolt})))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(V-E_K+4.753{millivolt})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0022841
  def comp plateau_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    // isVersionOf: http://identifiers.org//
    var i_Kp: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var g_Kp: milliS_per_microF {init: 0.00552};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var Kp: dimensionless;
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var E_K: millivolt {pub: in};
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
    i_Kp = g_Kp*Kp*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008282
  def comp ATP_sensitive_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_K_ATP: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var g_K_ATP: milliS_per_microF;
    var nATP: dimensionless {init: 0.24};
    var nicholsarea: dimensionless {init: 5e-5};
    var ATPi: millimolar {init: 3};
    var hATP: dimensionless {init: 2};
    var kATP: millimolar {init: 0.00025};
    var pATP: dimensionless;
    var GKbaraATP: milliS_per_microF;
    var V: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    g_K_ATP = 0.000193{milliS_per_microF}/nicholsarea;
    pATP = 1{dimensionless}/(1{dimensionless}+pow(ATPi/kATP, hATP));
    GKbaraATP = g_K_ATP*pATP*pow(Ko/4{millimolar}, nATP);
    i_K_ATP = GKbaraATP*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp transient_outward_current as
    var i_to: microA_per_microF {pub: out};
    var g_to: milliS_per_microF;
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: ms {priv: out, pub: in};
    var rvdv: dimensionless;
    var zdv: dimensionless {priv: in};
    var ydv: dimensionless {priv: in};
    g_to = 0{dimensionless}*0.5{milliS_per_microF};
    rvdv = exp(V/100{millivolt});
    i_to = g_to*pow(zdv, 3{dimensionless})*ydv*rvdv*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp transient_outward_current_zdv_gate as
    var zdv: dimensionless {init: 0.01198974, pub: out};
    var alpha_zdv: per_ms;
    var beta_zdv: per_ms;
    var tau_zdv: ms;
    var zdv_ss: dimensionless;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_zdv = 10{per_ms}*exp((V-40{millivolt})/25{millivolt})/(1{dimensionless}+exp((V-40{millivolt})/25{millivolt}));
    beta_zdv = 10{per_ms}*exp(-(V+90{millivolt})/25{millivolt})/(1{dimensionless}+exp(-(V+90{millivolt})/25{millivolt}));
    tau_zdv = 1{dimensionless}/(alpha_zdv+beta_zdv);
    zdv_ss = alpha_zdv/(alpha_zdv+beta_zdv);
    ode(zdv, time) = (zdv_ss-zdv)/tau_zdv;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp transient_outward_current_ydv_gate as
    var ydv: dimensionless {init: 0.97497, pub: out};
    var alpha_ydv: per_ms;
    var beta_ydv: per_ms;
    var tau_ydv: ms;
    var ydv_ss: dimensionless;
    var V: millivolt {pub: in};
    var time: ms {pub: in};
    alpha_ydv = 0.015{per_ms}/(1{dimensionless}+exp((V+60{millivolt})/5{millivolt}));
    beta_ydv = 0.1{per_ms}*exp((V+25{millivolt})/5{millivolt})/(1{dimensionless}+exp((V+25{millivolt})/5{millivolt}));
    tau_ydv = 1{dimensionless}/(alpha_ydv+beta_ydv);
    ydv_ss = alpha_ydv/(alpha_ydv+beta_ydv);
    ode(ydv, time) = (ydv_ss-ydv)/tau_ydv;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0070509
  // isVersionOf: http://identifiers.org/go/GO:0070588
  // isVersionOf: http://identifiers.org/go/GO:0015085
  // isVersionOf: http://identifiers.org/go/GO:0006816
  // isVersionOf: http://identifiers.org/go/GO:0060402
  def comp sarcolemmal_calcium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0070509
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0060402
    var i_p_Ca: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0070509
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0060402
    var K_mpCa: millimolar {init: 0.0005};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0070509
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0060402
    var I_pCa: microA_per_microF {init: 1.15};
    var Cai: millimolar {pub: in};
    i_p_Ca = I_pCa*Cai/(K_mpCa+Cai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp sodium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Na_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_Nab: milliS_per_microF {init: 0.004};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  def comp calcium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Ca_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var g_Cab: milliS_per_microF {init: 0.003016};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var E_Ca: millivolt {pub: out};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cai: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cao: millimolar {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005391
  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0008511
  def comp sodium_potassium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0008511
    var i_NaK: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0008511
    var I_NaK: microA_per_microF {init: 2};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0008511
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ko: millimolar {pub: in};
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67.3{millimolar})-1{dimensionless});
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK = I_NaK*f_NaK*1{dimensionless}/(1{dimensionless}+sqr(K_mNai/Nai))*Ko/(Ko+K_mKo);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp non_specific_calcium_activated_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_ns_Ca: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_ns_Na: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_ns_K: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var P_ns_Ca: litre_per_farad_ms;
    var gamma_Nai: dimensionless {pub: in};
    var gamma_Nao: dimensionless {pub: in};
    var gamma_Ki: dimensionless {pub: in};
    var gamma_Ko: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_ns_Na: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_ns_K: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var K_m_ns_Ca: millimolar {init: 0.0012};
    var time: ms {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cai: millimolar {pub: in};
    var V: millivolt {pub: in};
    P_ns_Ca = 0{dimensionless}*1.75e-7{litre_per_farad_ms};
    I_ns_Na = P_ns_Ca*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_ns_K = P_ns_Ca*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_ns_Na = I_ns_Na*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_K = I_ns_K*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_Ca = i_ns_Na+i_ns_K;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp Na_Ca_exchanger as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: out};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cai: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cao: millimolar {pub: in};
    var n_NaCa: dimensionless {init: 3, pub: out};
    var K_NaCa: microA_per_microF {init: 0.002};
    var d_NaCa: dimensionless {init: 0.001};
    var gamma: dimensionless {init: 0.5};
    i_NaCa = K_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Nai, n_NaCa)*Cao-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Nao, n_NaCa)*Cai)/((1{mM4}+d_NaCa*(Cai*pow(Nao, n_NaCa)+Cao*pow(Nai, n_NaCa)))*(1{dimensionless}+Cai/0.0069{millimolar}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp calcium_dynamics as
    var i_rel: millimolar_per_ms {pub: out};
    var i_up: millimolar_per_ms {pub: out};
    var i_leak: millimolar_per_ms {pub: out};
    var i_tr: millimolar_per_ms {pub: out};
    var G_rel: per_ms;
    var G_rel_max: per_ms {init: 60000};
    var G_rel_overload: per_ms {init: 4000};
    var tau_tr: ms {init: 0.18};
    var K_mrel: millimolar {init: 0.0008};
    var delta_Ca_ith: millimolar {init: 0.00018};
    var CSQN_max: millimolar {init: 10};
    var K_mCSQN: millimolar {init: 0.8};
    var K_mup: millimolar {init: 0.00092};
    var K_leak: per_ms;
    var I_up: millimolar_per_ms {init: 5};
    var Ca_NSR_max: millimolar {init: 15};
    var time: ms {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: millimolar {init: 0.00034209, pub: out};
    var Cao: millimolar {init: 1.8, pub: out};
    var Ca_JSR: millimolar {init: 0.8204291, pub: out};
    var Ca_NSR: millimolar {init: 2.7872629, pub: out};
    var V_myo: micro_litre {pub: in};
    var A_cap: cm2 {pub: in};
    var V_JSR: micro_litre;
    var V_NSR: micro_litre;
    var i_NaCa: microA_per_microF {pub: in};
    var i_CaCa: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Ca_T: microA_per_microF {pub: in};
    var K_mTn: millimolar {init: 0.0005};
    var K_mCMDN: millimolar {init: 0.00238};
    var Tn_max: millimolar {init: 0.07};
    var CMDN_max: millimolar {init: 0.05};
    var dVdt: millivolt_per_ms {pub: in};
    var APtrack: dimensionless {init: 3.7458e-87};
    var APtrack2: dimensionless {init: 2.07066e-86};
    var APtrack3: dimensionless {init: 0.01924195};
    var Cainfluxtrack: millimolar {init: 1.660129e-87};
    var OVRLDtrack: dimensionless {init: 1.97626e-323};
    var OVRLDtrack2: dimensionless {init: -2.470328e-323};
    var OVRLDtrack3: dimensionless {init: 2.2645e-282};
    var CSQNthresh: dimensionless {init: 0.7};
    var Logicthresh: dimensionless {init: 0.98};
    V_JSR = 0.0048{dimensionless}/0.68{dimensionless}*V_myo;
    V_NSR = 0.0552{dimensionless}/0.68{dimensionless}*V_myo;
    ode(APtrack, time) = sel
      case dVdt > 150{millivolt_per_ms}:
        100{per_ms}*(1{dimensionless}-APtrack)-0.5{per_ms}*APtrack;
      otherwise:
        -0.5{per_ms}*APtrack;
    endsel;
    ode(APtrack2, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100{per_ms}*(1{dimensionless}-APtrack2)-0.5{per_ms}*APtrack2;
      otherwise:
        -0.5{per_ms}*APtrack2;
    endsel;
    ode(APtrack3, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100{per_ms}*(1{dimensionless}-APtrack3)-0.5{per_ms}*APtrack3;
      otherwise:
        -0.01{per_ms}*APtrack3;
    endsel;
    ode(Cainfluxtrack, time) = sel
      case APtrack > 0.2{dimensionless}:
        -1{microF_per_cm2}*A_cap*(i_CaCa+i_Ca_T-i_NaCa+i_p_Ca+i_Ca_b)/(2{dimensionless}*V_myo*F);
      case (APtrack2 > 0.01{dimensionless}) and (APtrack <= 0.2{dimensionless}):
        0{millimolar_per_ms};
      otherwise:
        -0.5{per_ms}*Cainfluxtrack;
    endsel;
    ode(OVRLDtrack, time) = sel
      case (1{dimensionless}/(1{dimensionless}+K_mCSQN/Ca_JSR) > CSQNthresh) and (OVRLDtrack3 < 0.37{dimensionless}) and (APtrack3 < 0.37{dimensionless}):
        50{per_ms}*(1{dimensionless}-OVRLDtrack);
      otherwise:
        -0.5{per_ms}*OVRLDtrack;
    endsel;
    ode(OVRLDtrack2, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack2 < Logicthresh):
        50{per_ms}*(1{dimensionless}-OVRLDtrack2);
      otherwise:
        -0.5{per_ms}*OVRLDtrack2;
    endsel;
    ode(OVRLDtrack3, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack3 < Logicthresh):
        50{per_ms}*(1{dimensionless}-OVRLDtrack3);
      otherwise:
        -0.01{per_ms}*OVRLDtrack3;
    endsel;
    G_rel = sel
      case Cainfluxtrack > delta_Ca_ith:
        G_rel_max*(Cainfluxtrack-delta_Ca_ith)/(K_mrel+Cainfluxtrack-delta_Ca_ith)*(1{dimensionless}-APtrack2)*APtrack2;
      case (Cainfluxtrack <= delta_Ca_ith) and (OVRLDtrack2 > 0{dimensionless}):
        G_rel_overload*(1{dimensionless}-OVRLDtrack2)*OVRLDtrack2;
      otherwise:
        0{per_ms};
    endsel;
    i_rel = G_rel*(Ca_JSR-Cai);
    i_up = I_up*Cai/(Cai+K_mup);
    K_leak = I_up/Ca_NSR_max;
    i_leak = K_leak*Ca_NSR;
    i_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    ode(Ca_JSR, time) = 0.001{dimensionless}/(1{dimensionless}+CSQN_max*K_mCSQN/sqr(K_mCSQN+Ca_JSR))*(i_tr-i_rel);
    ode(Ca_NSR, time) = 0.001{dimensionless}*(-i_tr*V_JSR/V_NSR-i_leak+i_up);
    ode(Cai, time) = 0.001{dimensionless}/(1{dimensionless}+CMDN_max*K_mCMDN/sqr(K_mCMDN+Cai)+Tn_max*K_mTn/sqr(K_mTn+Cai))*(-1{microF_per_cm2}*A_cap*(i_CaCa+i_Ca_T-i_NaCa+i_p_Ca+i_Ca_b)/(2{dimensionless}*V_myo*F)+i_rel*V_JSR/V_myo+(i_leak-i_up)*V_NSR/V_myo);
  enddef;

  def comp ionic_concentrations as
    var Nai: millimolar {init: 14.177596, pub: out};
    var Nao: millimolar {init: 132, pub: out};
    var Ki: millimolar {init: 138.37949, pub: out};
    var Ko: millimolar {init: 4.5, pub: out};
    var A_cap: cm2 {init: 1.434e-7, pub: out};
    var preplength: mm {init: 0.001};
    var radius: mm {init: 1.1e-4};
    var volume: micro_litre;
    var V_myo: micro_litre {pub: out};
    var time: ms {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38634
    var i_Na: microA_per_microF {pub: in};
    var i_CaNa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38634
    var i_Na_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38634
    var i_ns_Na: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_CaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_K1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_Kp: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_K_ATP: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_ns_K: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    volume = pi*preplength*sqr(radius);
    V_myo = 0.68{dimensionless}*volume;
    ode(Nai, time) = -0.001{microF_per_cm2}*(i_Na+i_CaNa+i_Na_b+i_ns_Na+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless})*A_cap/(V_myo*F);
    ode(Ki, time) = -0.001{microF_per_cm2}*(i_CaK+i_Kr+i_Ks+i_K1+i_Kp+i_K_ATP+i_to+i_ns_K+(-i_NaK*2{dimensionless}))*A_cap/(V_myo*F);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f_Ca_gate;
      endcomp;
      comp T_type_Ca_channel incl
        comp T_type_Ca_channel_b_gate;
        comp T_type_Ca_channel_g_gate;
      endcomp;
      comp rapid_delayed_rectifier_potassium_current incl
        comp rapid_delayed_rectifier_potassium_current_xr_gate;
      endcomp;
      comp slow_delayed_rectifier_potassium_current incl
        comp slow_delayed_rectifier_potassium_current_xs1_gate;
        comp slow_delayed_rectifier_potassium_current_xs2_gate;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp transient_outward_current incl
        comp transient_outward_current_zdv_gate;
        comp transient_outward_current_ydv_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp plateau_potassium_current;
      comp ATP_sensitive_potassium_current;
      comp sarcolemmal_calcium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp non_specific_calcium_activated_current;
      comp ionic_concentrations;
      comp calcium_dynamics;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_b_gate;
      comp T_type_Ca_channel_g_gate;
    endcomp;
    comp rapid_delayed_rectifier_potassium_current incl
      comp rapid_delayed_rectifier_potassium_current_xr_gate;
    endcomp;
    comp slow_delayed_rectifier_potassium_current incl
      comp slow_delayed_rectifier_potassium_current_xs1_gate;
      comp slow_delayed_rectifier_potassium_current_xs2_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_zdv_gate;
      comp transient_outward_current_ydv_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between membrane and rapid_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ATP_sensitive_potassium_current for
    vars V and V;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_ns_Ca and i_ns_Ca;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between membrane and calcium_dynamics for
    vars F and F;
    vars dVdt and dVdt;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_CaNa and i_CaNa;
    vars i_CaK and i_CaK;
  enddef;
  def map between L_type_Ca_channel and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_CaCa and i_CaCa;
  enddef;
  def map between T_type_Ca_channel and calcium_dynamics for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_Ks and i_Ks;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and calcium_dynamics for
    vars Cai and Cai;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars i_Kr and i_Kr;
  enddef;
  def map between transient_outward_current and ionic_concentrations for
    vars i_to and i_to;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between ATP_sensitive_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between ATP_sensitive_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between transient_outward_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and calcium_dynamics for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between T_type_Ca_channel and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
  enddef;
  def map between non_specific_calcium_activated_current and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
  enddef;
  def map between L_type_Ca_channel and non_specific_calcium_activated_current for
    vars gamma_Nao and gamma_Nao;
    vars gamma_Nai and gamma_Nai;
    vars gamma_Ko and gamma_Ko;
    vars gamma_Ki and gamma_Ki;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_b_gate for
    vars b and b;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_g_gate for
    vars g and g;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_xr_gate for
    vars xr and xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs1_gate for
    vars xs1 and xs1;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs2_gate for
    vars xs2 and xs2;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K and E_K;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_ydv_gate for
    vars ydv and ydv;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_zdv_gate for
    vars zdv and zdv;
    vars time and time;
    vars V and V;
  enddef;
  def map between calcium_dynamics and ionic_concentrations for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
  enddef;
enddef;
// rdf:#b242fd22-92e3-4f14-af2e-6d0ad6d0e209
// creator: FN unknown
// value: unknown
// rdf:#43d4842e-a9b1-46b8-8639-e38f52fe138b
// Pubmed_id: 10318671
// JournalArticle: Other C; Given P; Family Viswanathan; Other M; Given R; Family Shaw; Given Y; Family Rudy; issue unknown; title Effects of IKr and IKs heterogeneity on action potential duration and its rate dependence: a simulation study; volume 99 18; first_page 2466; title Circulation; W3CDTF 1999-05-11; last_page 2474
// #viswanathan_1999
// title: unknown
