<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="VR6_GsNttgW" name="goldbeter_1995_1.1">
<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="goldbeter_1995_units.cellml">
<units name="micromolar" units_ref="micromolar"/>
<units name="hour" units_ref="hour"/>
<units name="flux" units_ref="flux"/>
<units name="first_order_rate_constant" units_ref="first_order_rate_constant"/>
</import>
<component name="environment">
<variable name="time" public_interface="out" units="hour"/>
</component>
<component name="M">
<math xmlns="http://www.w3.org/1998/Math/MathML" id="M_maths">
<apply id="M_equation">
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>M</ci>
</apply>
<apply>
<minus/>
<apply>
<divide/>
<apply>
<times/>
<ci>vs</ci>
<apply>
<power/>
<ci>KI</ci>
<ci>n</ci>
</apply>
</apply>
<apply>
<plus/>
<apply>
<power/>
<ci>KI</ci>
<ci>n</ci>
</apply>
<apply>
<power/>
<ci>PN</ci>
<ci>n</ci>
</apply>
</apply>
</apply>
<apply>
<divide/>
<apply>
<times/>
<ci>vm</ci>
<ci>M</ci>
</apply>
<apply>
<plus/>
<ci>Km</ci>
<ci>M</ci>
</apply>
</apply>
</apply>
</apply>
</math>
<variable initial_value="0.6" name="M" public_interface="out" units="micromolar"/>
<variable initial_value="0.5" name="Km" units="micromolar"/>
<variable initial_value="0.76" name="vs" units="flux"/>
<variable initial_value="0.65" name="vm" units="flux"/>
<variable initial_value="4" name="n" units="dimensionless"/>
<variable initial_value="1" name="KI" units="micromolar"/>
<variable name="PN" public_interface="in" units="micromolar"/>
<variable name="time" public_interface="in" units="hour"/>
</component>
<component name="P0">
<variable initial_value="0.5" name="P0" public_interface="out" units="micromolar"/>
<math xmlns="http://www.w3.org/1998/Math/MathML" id="P0_maths">
<apply id="P0_equation">
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P0</ci>
</apply>
<apply>
<plus/>
<apply>
<minus/>
<apply>
<times/>
<ci>ks</ci>
<ci>M</ci>
</apply>
<apply>
<divide/>
<apply>
<times/>
<ci>V1</ci>
<ci>P0</ci>
</apply>
<apply>
<plus/>
<ci>K1</ci>
<ci>P0</ci>
</apply>
</apply>
</apply>
<apply>
<divide/>
<apply>
<times/>
<ci>V2</ci>
<ci>P1</ci>
</apply>
<apply>
<plus/>
<ci>K2</ci>
<ci>P1</ci>
</apply>
</apply>
</apply>
</apply>
</math>
<variable initial_value="0.38" name="ks" units="first_order_rate_constant"/>
<variable name="M" public_interface="in" units="micromolar"/>
<variable name="P1" public_interface="in" units="micromolar"/>
<variable name="K1" public_interface="in" units="micromolar"/>
<variable name="V1" public_interface="in" units="flux"/>
<variable name="K2" public_interface="in" units="micromolar"/>
<variable name="V2" public_interface="in" units="flux"/>
<variable name="time" public_interface="in" units="hour"/>
</component>
<component name="P1">
<math xmlns="http://www.w3.org/1998/Math/MathML" id="P1_maths">
<apply id="P1_equation">
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P1</ci>
</apply>
<apply>
<plus/>
<apply>
<minus/>
<apply>
<divide/>
<apply>
<times/>
<ci>V1</ci>
<ci>P0</ci>
</apply>
<apply>
<plus/>
<ci>K1</ci>
<ci>P0</ci>
</apply>
</apply>
<apply>
<plus/>
<apply>
<divide/>
<apply>
<times/>
<ci>V2</ci>
<ci>P1</ci>
</apply>
<apply>
<plus/>
<ci>K2</ci>
<ci>P1</ci>
</apply>
</apply>
<apply>
<divide/>
<apply>
<times/>
<ci>V3</ci>
<ci>P1</ci>
</apply>
<apply>
<plus/>
<ci>K3</ci>
<ci>P1</ci>
</apply>
</apply>
</apply>
</apply>
<apply>
<divide/>
<apply>
<times/>
<ci>V4</ci>
<ci>P2</ci>
</apply>
<apply>
<plus/>
<ci>K4</ci>
<ci>P2</ci>
</apply>
</apply>
</apply>
</apply>
</math>
<variable initial_value="0.6" name="P1" public_interface="out" units="micromolar"/>
<variable name="P0" public_interface="in" units="micromolar"/>
<variable name="P2" public_interface="in" units="micromolar"/>
<variable name="K1" public_interface="in" units="micromolar"/>
<variable name="V1" public_interface="in" units="flux"/>
<variable name="K2" public_interface="in" units="micromolar"/>
<variable name="V2" public_interface="in" units="flux"/>
<variable name="K3" public_interface="in" units="micromolar"/>
<variable name="V3" public_interface="in" units="flux"/>
<variable name="K4" public_interface="in" units="micromolar"/>
<variable name="V4" public_interface="in" units="flux"/>
<variable name="time" public_interface="in" units="hour"/>
</component>
<component name="P2">
<math xmlns="http://www.w3.org/1998/Math/MathML" id="P2_maths">
<apply id="P2_equation">
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P2</ci>
</apply>
<apply>
<minus/>
<apply>
<plus/>
<apply>
<minus/>
<apply>
<divide/>
<apply>
<times/>
<ci>V3</ci>
<ci>P1</ci>
</apply>
<apply>
<plus/>
<ci>K3</ci>
<ci>P1</ci>
</apply>
</apply>
<apply>
<plus/>
<apply>
<divide/>
<apply>
<times/>
<ci>V4</ci>
<ci>P2</ci>
</apply>
<apply>
<plus/>
<ci>K4</ci>
<ci>P2</ci>
</apply>
</apply>
<apply>
<times/>
<ci>k1</ci>
<ci>P2</ci>
</apply>
</apply>
</apply>
<apply>
<times/>
<ci>k2</ci>
<ci>PN</ci>
</apply>
</apply>
<apply>
<divide/>
<apply>
<times/>
<ci>vd</ci>
<ci>P2</ci>
</apply>
<apply>
<plus/>
<ci>Kd</ci>
<ci>P2</ci>
</apply>
</apply>
</apply>
</apply>
</math>
<variable initial_value="0.6" name="P2" public_interface="out" units="micromolar"/>
<variable initial_value="0.2" name="Kd" units="micromolar"/>
<variable initial_value="0.95" name="vd" units="flux"/>
<variable name="P1" public_interface="in" units="micromolar"/>
<variable name="PN" public_interface="in" units="micromolar"/>
<variable name="k1" public_interface="in" units="first_order_rate_constant"/>
<variable name="k2" public_interface="in" units="first_order_rate_constant"/>
<variable name="K3" public_interface="in" units="micromolar"/>
<variable name="V3" public_interface="in" units="flux"/>
<variable name="K4" public_interface="in" units="micromolar"/>
<variable name="V4" public_interface="in" units="flux"/>
<variable name="time" public_interface="in" units="hour"/>
</component>
<component name="PN">
<math xmlns="http://www.w3.org/1998/Math/MathML" id="PN_maths">
<apply id="PN_equation">
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>PN</ci>
</apply>
<apply>
<minus/>
<apply>
<times/>
<ci>k1</ci>
<ci>P2</ci>
</apply>
<apply>
<times/>
<ci>k2</ci>
<ci>PN</ci>
</apply>
</apply>
</apply>
</math>
<variable initial_value="1.1" name="PN" public_interface="out" units="micromolar"/>
<variable name="P2" public_interface="in" units="micromolar"/>
<variable name="k1" public_interface="in" units="first_order_rate_constant"/>
<variable name="k2" public_interface="in" units="first_order_rate_constant"/>
<variable name="time" public_interface="in" units="hour"/>
</component>
<component name="Pt">
<math xmlns="http://www.w3.org/1998/Math/MathML" id="Pt_maths">
<apply id="Pt_equation">
<eq/>
<ci>Pt</ci>
<apply>
<plus/>
<ci>P0</ci>
<ci>P1</ci>
<ci>P2</ci>
<ci>PN</ci>
</apply>
</apply>
</math>
<variable name="Pt" public_interface="out" units="micromolar"/>
<variable name="P0" public_interface="in" units="micromolar"/>
<variable name="P1" public_interface="in" units="micromolar"/>
<variable name="P2" public_interface="in" units="micromolar"/>
<variable name="PN" public_interface="in" units="micromolar"/>
</component>
<component name="parameters">
<variable initial_value="1.9" name="k1" public_interface="out" units="first_order_rate_constant"/>
<variable initial_value="1.3" name="k2" public_interface="out" units="first_order_rate_constant"/>
<variable initial_value="2" name="K1" public_interface="out" units="micromolar"/>
<variable initial_value="3.2" name="V1" public_interface="out" units="flux"/>
<variable initial_value="2" name="K2" public_interface="out" units="micromolar"/>
<variable initial_value="1.58" name="V2" public_interface="out" units="flux"/>
<variable initial_value="2" name="K3" public_interface="out" units="micromolar"/>
<variable initial_value="5" name="V3" public_interface="out" units="flux"/>
<variable initial_value="2" name="K4" public_interface="out" units="micromolar"/>
<variable initial_value="2.5" name="V4" public_interface="out" units="flux"/>
</component>
<connection>
<map_components component_1="environment" component_2="M"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="environment" component_2="P0"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="environment" component_2="P1"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="environment" component_2="P2"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="environment" component_2="PN"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="parameters" component_2="P0"/>
<map_variables variable_1="V1" variable_2="V1"/>
<map_variables variable_1="K1" variable_2="K1"/>
<map_variables variable_1="V2" variable_2="V2"/>
<map_variables variable_1="K2" variable_2="K2"/>
</connection>
<connection>
<map_components component_1="parameters" component_2="P1"/>
<map_variables variable_1="K1" variable_2="K1"/>
<map_variables variable_1="V1" variable_2="V1"/>
<map_variables variable_1="K2" variable_2="K2"/>
<map_variables variable_1="V2" variable_2="V2"/>
<map_variables variable_1="K3" variable_2="K3"/>
<map_variables variable_1="V3" variable_2="V3"/>
<map_variables variable_1="K4" variable_2="K4"/>
<map_variables variable_1="V4" variable_2="V4"/>
</connection>
<connection>
<map_components component_1="parameters" component_2="P2"/>
<map_variables variable_1="k1" variable_2="k1"/>
<map_variables variable_1="k2" variable_2="k2"/>
<map_variables variable_1="K3" variable_2="K3"/>
<map_variables variable_1="V3" variable_2="V3"/>
<map_variables variable_1="K4" variable_2="K4"/>
<map_variables variable_1="V4" variable_2="V4"/>
</connection>
<connection>
<map_components component_1="parameters" component_2="PN"/>
<map_variables variable_1="k1" variable_2="k1"/>
<map_variables variable_1="k2" variable_2="k2"/>
</connection>
<connection>
<map_components component_1="M" component_2="PN"/>
<map_variables variable_1="PN" variable_2="PN"/>
</connection>
<connection>
<map_components component_1="M" component_2="P0"/>
<map_variables variable_1="M" variable_2="M"/>
</connection>
<connection>
<map_components component_1="P0" component_2="P1"/>
<map_variables variable_1="P1" variable_2="P1"/>
<map_variables variable_1="P0" variable_2="P0"/>
</connection>
<connection>
<map_components component_1="P0" component_2="Pt"/>
<map_variables variable_1="P0" variable_2="P0"/>
</connection>
<connection>
<map_components component_1="P1" component_2="P2"/>
<map_variables variable_1="P1" variable_2="P1"/>
<map_variables variable_1="P2" variable_2="P2"/>
</connection>
<connection>
<map_components component_1="P1" component_2="Pt"/>
<map_variables variable_1="P1" variable_2="P1"/>
</connection>
<connection>
<map_components component_1="P2" component_2="PN"/>
<map_variables variable_1="P2" variable_2="P2"/>
<map_variables variable_1="PN" variable_2="PN"/>
</connection>
<connection>
<map_components component_1="P2" component_2="Pt"/>
<map_variables variable_1="P2" variable_2="P2"/>
</connection>
<connection>
<map_components component_1="PN" component_2="Pt"/>
<map_variables variable_1="PN" variable_2="PN"/>
</connection>
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
<rdf:Description rdf:about="#VR6_GsNttgW">
<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n1"/>
</simulation>
</rdf:Description>
<rdf:Description rdf:nodeID="n2">
<rdf:first>
<rdf:Description rdf:nodeID="n3"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:nodeID="n3">
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">10000</pointDensity>
<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">75</endingValue>
<maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">0.01</maximumStepSize>
</rdf:Description>
<rdf:Description rdf:nodeID="n1">
<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
<rdf:Description rdf:nodeID="n2"/>
</boundIntervals>
</rdf:Description>
</rdf:RDF>
</model>