//   FILE :  rice_model2_2000_raw.xml
//
// CREATED :  24th June 2002
//
// LAST MODIFIED : 9th April 2003
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
//                 10th August 2001, and the 16/01/2002 CellML Metadata 1.0
//                 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Rice et al's 2000
//                detailed model of ventricular cardiac myocytes.  It simulates
//                action potentials, Ca2+-handling mechanisms and isometric force
//                generation by the myofilaments.
//
// CHANGES:
//   18/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
// title: The Rice et al's 2000 detailed model of ventricular cardiac myocytes
// bio_entity: Cardiac Myocyte
// comment: This is the CellML description of Rice et al's 2000 detailed model of ventricular cardiac myocytes. It simulates action potentials, Ca2+-handling mechanisms and isometric force generation by the myofilaments.; FN Catherine Lloyd
// reference: Pubmed_id 10710361; title Modeling short-term interval-force relations in cardiac muscle; Given John; Family Rice; Other Jeremy; Given M; Family Jafri; Other Saleet; Given Raimond; Family Winslow; Other L; volume 278; first_page H913; title American Journal of Physiology: Heart and Circulatory Physiology; W3CDTF 2000-03-01; last_page H931
// reference: _1 calcium dynamics; _2 cardiac myocyte; _3 Cardiac Myocyte; _4 electrophysiology; _5 myofilament mechanics; _6 cardiac; subject_type keyword
def model rice_jafri_winslow_2000_version02 as
  // Modelling Interval-Force Relations in Cardiac Muscle
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // Short-term interval-force (I-F) relations describe the dependence of cardiac muscle contraction strength for short interbeat intervals. Two phenomena that characterise these short-term I-F relations are restitution and postextrasystolic potentiation. In their 2000 paper, J. Jeremy Rice, M. Saleet Jafri and Raimond L. Winslow use two modelling approaches to study short-term interval-force relations in cardiac muscle. Their first approach employs a relatively simple (or minimal), discrete-time model of excitation-contraction coupling. This model explains restitution and postextrasystolic potentiation in terms of the total amount of Ca2+ stored in the sarcoplasmic reticulum (SR) and a feature in which Ca2+ stored in the SR slowly becomes available for release into the sarcoplasm (see below).
  //
  // simple_model
  //
  // Schematic diagram of a simple, discrete-time model of Ca2+-handling in restitution and postextrasystolic potentiation. InSC and OutSC represent Ca2+ influx and efflux across the sarcolemma, and InSR and OutSR represent sarcoplasmic reticulum Ca2+ release and uptake.
  //
  // In their second modelling approach, J. Jeremy Rice, M. Saleet Jafri and Raimond L. Winslow develop a more detailed ventricular cell model that is able to simulate action potentials, Ca2+-handling mechanisms, and isometric force generation by the myofilaments. This single comprehensive (or maximal) model combines two previously developed models (see The Jafri-Rice-Winslow Ventricular Model, 1998 (${HTML_EXMPL_JRW_MODEL}) and Cooperative Mechanisms in Cardiac Muscle, Rice et al., 1999 (${HTML_EXMPL_RICE_MODEL})). The first ventricular cell model describes membrane currents and Ca2+-handling, and the second model of myofilaments provides the force generation of muscle contraction (see below). The ventricular cell model provides the Ca2+ needed to drive the myofilament contraction. This is a feedforward pathway in which Ca2+ binds to troponin and initiates force generation by triggering myofilament contraction. A feedback pathway also links the two models, as the affinity of troponin for Ca2+ is a function of developed force.
  //
  // Modeling short-term interval-force relations in cardiac muscle, J. Jeremy Rice, M. Saleet Jafri and Raimond L. Winslow, 2000, American Journal of Physiology, 278, H913-H931. PubMed ID: 10710361 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=10710361&dopt=Abstract)
  //
  // detailed_model
  //
  // Schematic diagram of a detailed, single ventricular cell model which is able to simulate action potentials, Ca2+-handling and isometric force generation by myofilaments.
  //
  // Simulation results generated from the model support experimental data. They suggest that short-term interval-force relations result mainly from the interplay between ryanodine receptor adaptation and SR Ca2+ loading with additional contributions from membrane currents and myofilament activation.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit cm_per_millisecond as
    unit metre {pref: centi};
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit micromolar_per_second as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit micromolar_per_millisecond as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_micromolar_per_second as
    unit micromolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_micromolar3_per_millisecond as
    unit micromolar {expo: -3};
    unit millisecond {expo: -1};
  enddef;
  def unit per_micromolar4_per_millisecond as
    unit micromolar {expo: -4};
    unit millisecond {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit N_per_mm2 as
    unit newton;
    unit metre {expo: -2, pref: milli};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp cell_geometry as
    var A_cap: cm2 {init: 1.534E-4, pub: out};
    var V_myo: micro_litre {init: 25.84E-6, pub: out};
    var V_JSR: micro_litre {init: 0.16E-6, pub: out};
    var V_NSR: micro_litre {init: 1.40E-6, pub: out};
    var V_SS: micro_litre {init: 0.495E-6, pub: out};
  enddef;
  // The "membrane" component is really the `root' node of our model.
  // It defines the action potential variable "V" among other things.

  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0042391
  def comp membrane as
    var V: millivolt {init: -84.1638, pub: out};
    var R: joule_per_mole_kelvin {init: 8.314, pub: out};
    var T: kelvin {init: 310.0, pub: out};
    var F: coulomb_per_millimole {init: 96.5, pub: out};
    var Cm: microF_per_cm2 {init: 1.0};
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: in};
    var i_Ca: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var i_Ca_K: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_K: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var i_K1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_Kp: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var i_p_Ca: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Na_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Ca_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_ns_Ca: microA_per_microF {pub: in};
    ode(V, time) = -1.0{dimensionless}/Cm*(i_Na+i_Ca+i_Ca_K+i_K+i_K1+i_Kp+i_NaCa+i_NaK+i_ns_Ca+i_p_Ca+i_Ca_b+i_Na_b);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0019871
    var g_Na: milliS_per_microF {init: 12.8};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_m_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {init: 0.0326174, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_m: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*((V+47.13{millivolt})/(1.0{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt}))));
    beta_m = 0.08{per_millisecond}*exp(-V/11.0{millivolt});
    ode(m, time) = alpha_m*(1.0{per_millivolt}-m)-beta_m*m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_h_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {init: 0.962369, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_h: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_h: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40.0{millivolt}:
        0.135{per_millisecond}*exp((80.0{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40.0{millivolt}:
        3.56{per_millisecond}*exp(0.079{millivolt}*V)+310000.0{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1.0{dimensionless}/(0.13{millisecond}*(1.0{dimensionless}+exp(-(V+10.66{millivolt})/11.1{millivolt})));
    endsel;
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_j_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var j: dimensionless {init: 0.975658, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_j: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org//
    var beta_j: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40.0{millivolt}:
        (-127140.0{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)-0.00003474{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))*((V+37.78{millivolt})/(1.0{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}))));
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40.0{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-0.0000002535{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1{per_millivolt}*(V+32.0{millivolt})));
    endsel;
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp time_dependent_potassium_current as
    // isVersionOf: http://identifiers.org//
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_K: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var g_K: milliS_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var E_K: millivolt;
    var PNa_K: cm_per_second {init: 0.01833};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var X: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var Xi: dimensionless {priv: in};
    g_K = 0.1128{milliS_per_microF}*sqrt(Ko/5.4{millimolar});
    E_K = R*T/F*ln((Ko+PNa_K*Nao)/(Ki+PNa_K*Nai));
    i_K = g_K*Xi*sqr(X)*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp time_dependent_potassium_current_X_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var X: dimensionless {init: 0.000337175, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var alpha_X: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var beta_X: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_X = 0.0000719{per_millivolt_millisecond}*(V+30.0{millivolt})/(1.0{dimensionless}-exp(-0.148{per_millivolt}*(V+30.0{millivolt})));
    beta_X = 0.000131{per_millivolt_millisecond}*(V+30.0{millivolt})/(-1.0{dimensionless}+exp(0.0687{per_millivolt}*(V+30.0{millivolt})));
    ode(X, time) = alpha_X*(1.0{dimensionless}-X)-beta_X*X;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp time_dependent_potassium_current_Xi_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var Xi: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    Xi = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-40.0{millivolt})/40.0{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005242
  def comp time_independent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var i_K1: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var E_K1: millivolt {priv: out, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var g_K1: milliS_per_microF;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var K1_infinity: dimensionless {priv: in};
    g_K1 = 0.75{milliS_per_microF}*sqrt(Ko/5.4{millimolar});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005242
  def comp time_independent_potassium_current_K1_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var K1_infinity: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var alpha_K1: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var beta_K1: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var E_K1: millivolt {pub: in};
    alpha_K1 = 1.02{per_millisecond}/(1.0{dimensionless}+exp(0.2385{per_millivolt}*(V-(E_K1+59.215{millivolt}))));
    beta_K1 = (0.49124{per_millisecond}*exp(0.08032{dimensionless}*(V-E_K1+5.476{millivolt}))+exp(0.06175{dimensionless}*(V-E_K1-594.31{millivolt})))/(1.0{dimensionless}+exp(-0.5143{per_millivolt}*(V-E_K1+4.753{millivolt})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp plateau_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_Kp: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var E_Kp: millivolt;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var g_Kp: milliS_per_microF {init: 0.00828};
    var Kp: dimensionless;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var E_K1: millivolt {pub: in};
    E_Kp = E_K1;
    Kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp Na_Ca_exchanger as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var k_NaCa: microA_per_microF {init: 9000.0};
    var K_mNa: millimolar {init: 87.5};
    var K_mCa: millimolar {init: 1.38};
    var k_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: millimolar {pub: in};
    i_NaCa = k_NaCa*(1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless})))*(1.0{dimensionless}/(K_mCa+Cao))*(1.0{dimensionless}/(1.0{dimensionless}+k_sat*exp((eta-1.0{dimensionless})*(V*F/(R*T)))))*(exp(eta*(V*F/(R*T)))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*(V*F/(R*T)))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: microA_per_microF {pub: out};
    var I_NaK: microA_per_microF {init: 2.47};
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10.0};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*(V*F/(R*T)))+0.0365{dimensionless}*sigma*exp(-(V*F/(R*T))));
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{dimensionless})-1.0{dimensionless});
    i_NaK = I_NaK*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless})))*(Ko/(Ko+K_mKo));
  enddef;

  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: microA_per_microF {pub: out};
    var i_ns_Na: microA_per_microF {pub: out};
    var i_ns_K: microA_per_microF {pub: out};
    var I_ns_Ca: microA_per_microF;
    var I_ns_Na: microA_per_microF;
    var I_ns_K: microA_per_microF;
    var K_m_ns_Ca: micromolar {init: 1.2};
    var Pns_Na: cm_per_second {init: 0.0};
    var Pns_K: cm_per_second {init: 0.0};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    var Nai: micromolar {pub: in};
    var Ki: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    i_ns_Na = I_ns_Na*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    i_ns_K = I_ns_K*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    i_ns_Ca = i_ns_Na+i_ns_K;
    I_ns_Na = Pns_Na*(V*sqr(F)/(R*T))*((0.75{dimensionless}*Nai*exp(V*F/(R*T))-0.75{dimensionless}*Nao)/(exp(V*F/(R*T))-1.0{dimensionless}));
    I_ns_K = Pns_K*(V*sqr(F)/(R*T))*((0.75{dimensionless}*Ki*exp(V*F/(R*T))-0.75{dimensionless}*Ko)/(exp(V*F/(R*T))-1.0{dimensionless}));
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: microA_per_microF {pub: out};
    var K_mpCa: micromolar {init: 0.5};
    var I_pCa: microA_per_microF {init: 0.575};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    i_p_Ca = I_pCa*(Cai/(K_mpCa+Cai));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp calcium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Ca_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_Cab: milliS_per_microF {init: 0.006032};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var E_CaN: millivolt;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: millimolar {pub: in};
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_CaN);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp sodium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Na_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_Nab: milliS_per_microF {init: 0.00141};
    var E_NaN: millivolt;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    E_NaN = E_Na;
    i_Na_b = g_Nab*(V-E_NaN);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005245
  def comp L_type_Ca_channel as
    var i_Ca: microA_per_microF {pub: out};
    var i_Ca_K: microA_per_microF {pub: out};
    var P_Ca: cm_per_second {init: 4.32E-3};
    var P_K: cm_per_second {init: 1.11E-11};
    var p_k: cm_per_second;
    var i_Ca_half: microA_per_microF {init: -2.16};
    var i_Ca_max: microA_per_microF;
    var O: dimensionless {init: 4.21370E-19};
    var O_Ca: dimensionless {init: 0.0};
    var alpha: per_millisecond;
    var beta: per_millisecond;
    var gamma: per_millisecond;
    var alpha_a: per_millisecond;
    var beta_b: per_millisecond;
    var a: dimensionless {init: 2.0};
    var b: dimensionless {init: 2.0};
    var g: per_millisecond {init: 2.0};
    var f: per_millisecond {init: 0.3};
    var g_: per_millisecond {init: 0.0};
    var f_: per_millisecond {init: 0.0};
    var omega: per_millisecond {init: 0.01};
    var C0: dimensionless {init: 0.998666};
    var C1: dimensionless {init: 1.63594E-4};
    var C2: dimensionless {init: 1.00495E-8};
    var C3: dimensionless {init: 2.74371E-13};
    var C4: dimensionless {init: 2.80908E-18};
    var C_Ca0: dimensionless {init: 0.00272826};
    var C_Ca1: dimensionless {init: 7.67674E-7};
    var C_Ca2: dimensionless {init: 1.88635E-10};
    var C_Ca3: dimensionless {init: 2.06007E-14};
    var C_Ca4: dimensionless {init: 8.43672E-19};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ca_SS: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var y: dimensionless {priv: in};
    i_Ca = i_Ca_max*y*(O+O_Ca);
    i_Ca_max = pow(P_Ca, 4.0{dimensionless})*(V*sqr(F)/(R*T))*((0.001{dimensionless}*exp(2.0{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Cao)/(exp(2.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    i_Ca_K = p_k*y*(O+O_Ca)*(V*sqr(F)/(R*T))*((Ki*exp(V*F/(R*T))-Ko)/(exp(V*F/(R*T))-1.0{dimensionless}));
    p_k = P_K/(1.0{dimensionless}+i_Ca_max/i_Ca_half);
    alpha = 0.4{per_millisecond}*exp((V+12.0{millivolt})/10.0{millivolt});
    beta = 0.05{per_millisecond}*exp(-(V+12.0{millivolt})/13.0{millivolt});
    alpha_a = alpha*a;
    beta_b = beta/b;
    gamma = 0.5625{dimensionless}*Ca_SS;
    ode(C0, time) = beta*C1+omega*C_Ca0-(4.0{dimensionless}*alpha+gamma)*C0;
    ode(C1, time) = 4.0{dimensionless}*alpha*C0+2.0{dimensionless}*beta*C2+omega/b*C_Ca1-(beta+3.0{dimensionless}*alpha+gamma*a)*C1;
    ode(C2, time) = 3.0{dimensionless}*alpha*C1+3.0{dimensionless}*beta*C3+omega/sqr(b)*C_Ca2-(beta*2.0{dimensionless}+2.0{dimensionless}*alpha+gamma*sqr(a))*C2;
    ode(C3, time) = 2.0{dimensionless}*alpha*C2+4.0{dimensionless}*beta*C4+omega/pow(b, 3.0{dimensionless})*C_Ca3-(beta*3.0{dimensionless}+alpha+gamma*pow(a, 3.0{dimensionless}))*C3;
    ode(C4, time) = alpha*C3+g*O+omega/pow(b, 4.0{dimensionless})*C_Ca4-(beta*4.0{dimensionless}+f+gamma*pow(a, 4.0{dimensionless}))*C4;
    ode(O, time) = f*C4-g*O;
    ode(C_Ca0, time) = beta_b*C_Ca1+gamma*C_Ca0-(4.0{dimensionless}*alpha_a+omega)*C_Ca0;
    ode(C_Ca1, time) = 4.0{dimensionless}*alpha_a*C_Ca0+2.0{dimensionless}*beta_b*C_Ca2+gamma*a*C1-(beta_b+3.0{dimensionless}*alpha_a+omega/b)*C_Ca1;
    ode(C_Ca2, time) = 3.0{dimensionless}*alpha_a*C_Ca1+3.0{dimensionless}*beta_b*C_Ca3+gamma*sqr(a)*C2-(beta_b*2.0{dimensionless}+2.0{dimensionless}*alpha_a+omega/sqr(b))*C_Ca2;
    ode(C_Ca3, time) = 2.0{dimensionless}*alpha_a*C_Ca2+4.0{dimensionless}*beta_b*C_Ca4+gamma*pow(a, 3.0{dimensionless})*C3-(beta_b*3.0{dimensionless}+alpha_a+omega/pow(b, 3.0{dimensionless}))*C_Ca3;
    ode(C_Ca4, time) = alpha_a*C_Ca3+g_*O_Ca+gamma*pow(a, 4.0{dimensionless})*C4-(beta_b*4.0{dimensionless}+f_+omega/pow(b, 4.0{dimensionless}))*C_Ca4;
    ode(O_Ca, time) = f_*C_Ca4-g_*O_Ca;
  enddef;

  // isVersionOf: http://identifiers.org//
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005245
  def comp L_type_Ca_channel_y_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var y: dimensionless {init: 0.862010, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var y_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var tau_y: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(y, time) = (y_infinity-y)/tau_y;
    y_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+55.0{millivolt})/7.5{millivolt}))+0.1{dimensionless}/(1.0{dimensionless}+exp((-V+21.0{millivolt})/6.0{millivolt}));
    tau_y = 20.0{dimensionless}+600.0{dimensionless}/(1.0{dimensionless}+exp((V+30.0{millivolt})/9.5{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  def comp RyR_channel_states as
    var P_O1: dimensionless {init: 0.428917E-3, pub: out};
    var P_O2: dimensionless {init: 0.487455E-9, pub: out};
    var P_C1: dimensionless {init: 0.637931};
    var P_C2: dimensionless {init: 0.361643};
    var k_a_plus: per_micromolar4_per_millisecond {init: 0.01215};
    var k_a_minus: per_millisecond {init: 0.1425};
    var k_b_plus: per_micromolar3_per_millisecond {init: 0.00405};
    var k_b_minus: per_millisecond {init: 1.930};
    var k_c_plus: per_millisecond {init: 0.010};
    var k_c_minus: per_millisecond {init: 0.0008};
    var n: dimensionless {init: 4.0};
    var m: dimensionless {init: 3.0};
    var time: millisecond {pub: in};
    var Ca_SS: millimolar {pub: in};
    ode(P_C1, time) = -k_a_plus*pow(Ca_SS, n)*P_C1+k_a_minus*P_O1;
    ode(P_O1, time) = k_a_plus*pow(Ca_SS, n)*P_C1-(k_a_minus*P_O1+k_b_plus*pow(Ca_SS, m)*P_O1+k_c_plus*P_O1)+k_b_minus*P_O2+k_c_minus*P_C2;
    ode(P_O2, time) = k_b_plus*pow(Ca_SS, m)*P_O1-k_b_minus*P_O2;
    ode(P_C2, time) = k_c_plus*P_O1-k_c_minus*P_C2;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0051208
  // isVersionOf: http://identifiers.org/go/GO:0070296
  def comp SERCA_pump as
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var J_up: micromolar_per_millisecond {pub: out};
    var k_fb: micromolar {init: 0.24};
    var k_rb: millimolar {init: 1.64};
    var fb: micromolar_per_second {init: 0.292};
    var rb: micromolar_per_second {init: 0.311};
    var Vmax_f: micromolar_per_second;
    var Vmax_r: micromolar_per_second;
    var n_fb: dimensionless {init: 1.4};
    var n_rb: dimensionless;
    var time: millisecond {pub: in};
    var Ca_NSR: micromolar {pub: in};
    var Cai: micromolar {pub: in};
    J_up = (Vmax_f*fb-Vmax_r*rb)/(1.0{dimensionless}+fb+rb);
    fb = pow(Cai/k_fb, n_fb);
    rb = pow(Ca_NSR/k_rb, n_rb);
  enddef;

  def comp intracellular_Ca_fluxes as
    var J_rel: micromolar_per_millisecond {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var J_trpn: micromolar_per_millisecond {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var J_tr: micromolar_per_millisecond {pub: out};
    var J_xfer: micromolar_per_millisecond {pub: out};
    var v1: per_millisecond {init: 3.6};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0031013
    var tau_tr: millisecond {init: 0.5747};
    var tau_xfer: millisecond {init: 9.09};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var HTRPN_tot: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var LTRPN_tot: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var HTRPNCa: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var LTRPNCa: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var k_htrpn_plus: per_micromolar_per_second {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var k_htrpn_minus: per_second {pub: in};
    var k_ltrpn_plus: per_micromolar_per_second {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var k_ltrpn_minus: per_micromolar_per_second {pub: in};
    var time: millisecond {pub: in};
    var P_O1: dimensionless {pub: in};
    var P_O2: dimensionless {pub: in};
    var Cai: micromolar {pub: in};
    var Ca_SS: millimolar {pub: in};
    var Ca_NSR: micromolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    J_rel = v1*(P_O1+P_O2)*(Ca_JSR-Ca_SS);
    J_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    J_xfer = (Ca_SS-Cai)/tau_xfer;
    J_trpn = k_htrpn_plus*Cai*(HTRPN_tot-HTRPNCa-k_htrpn_minus*HTRPNCa)+k_ltrpn_plus*Cai*(LTRPN_tot-LTRPNCa-k_ltrpn_minus*LTRPNCa);
  enddef;

  def comp intracellular_ionic_concentrations as
    var Nai: millimolar {pub: out};
    var Nao: millimolar {init: 140.0, pub: out};
    var Ki: millimolar {pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
    var Cai: millimolar {pub: out};
    var Cao: millimolar {init: 1.8, pub: out};
    var Ca_SS: millimolar {pub: out};
    var Ca_NSR: millimolar {pub: out};
    var Ca_JSR: millimolar {pub: out};
    var betai: dimensionless;
    var beta_SS: dimensionless;
    var beta_JSR: dimensionless;
    var K_mCMDN: micromolar {init: 2.38};
    var K_mCSQN: millimolar {init: 0.8};
    var CSQN_tot: millimolar {init: 15.0};
    var CMDN_tot: micromolar {init: 50.0};
    var time: millisecond {pub: in};
    var J_rel: micromolar_per_millisecond {pub: in};
    var J_up: micromolar_per_millisecond {pub: in};
    var J_tr: micromolar_per_millisecond {pub: in};
    var J_xfer: micromolar_per_millisecond {pub: in};
    var J_trpn: micromolar_per_millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_ns_Na: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_Ca: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Ca_K: microA_per_microF {pub: in};
    var i_K: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_ns_K: microA_per_microF {pub: in};
    var A_cap: cm2 {pub: in};
    var V_myo: micro_litre {pub: in};
    var V_JSR: micro_litre {pub: in};
    var V_NSR: micro_litre {pub: in};
    var V_SS: micro_litre {pub: in};
    betai = 1.0{dimensionless}/(1.0{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Cai));
    beta_SS = 1.0{dimensionless}/(1.0{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_SS));
    beta_JSR = 1.0{dimensionless}/(1.0{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
    ode(Cai, time) = betai*(-(J_xfer+J_up+J_trpn+(i_Ca_b+(-(2.0{dimensionless}*i_NaCa))+i_p_Ca)*(A_cap/(2.0{dimensionless}*V_myo*F))));
    ode(Ca_SS, time) = beta_SS*(J_rel*(V_JSR/V_SS)-J_xfer*(V_myo/V_SS)-i_Ca*(A_cap/(2.0{dimensionless}*V_SS*F)));
    ode(Ca_JSR, time) = beta_JSR*(J_tr-J_rel);
    ode(Ca_NSR, time) = J_up*(V_myo/V_NSR)-J_tr*(V_JSR/V_NSR);
    ode(Nai, time) = -(i_Na+i_Na_b+i_ns_Na+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*(A_cap/(V_myo*F));
    ode(Ki, time) = -(i_Ca_K+i_K+i_K1+i_Kp+i_ns_K+(-(i_NaK*2.0{dimensionless})))*(A_cap/(V_myo*F));
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62338
  def comp troponin as
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var k_htrpn_plus: per_micromolar_per_second {init: 1.0E8, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var k_htrpn_minus: per_second {init: 0.33, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var k_ltrpn_plus: per_micromolar_per_second {init: 4.0E7, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var k_ltrpn_minus: per_micromolar_per_second {init: 40.0, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var HTRPN_tot: micromolar {init: 140.0, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var LTRPN_tot: micromolar {init: 70.0, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    var HTRPNCa: millimolar {init: 0.132944, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    var LTRPNCa: millimolar {init: 0.4068232, pub: out};
    var Force_norm: N_per_mm2 {pub: in};
    var Cai: millimolar {pub: in};
    var time: millisecond {pub: in};
    ode(HTRPNCa, time) = k_htrpn_plus*Cai*(HTRPN_tot-HTRPNCa)-k_htrpn_minus*HTRPNCa;
    ode(LTRPNCa, time) = k_ltrpn_plus*Cai*(LTRPN_tot-LTRPNCa)-k_ltrpn_minus*LTRPNCa*(0.333{dimensionless}+0.667{dimensionless}*(1.0{dimensionless}-Force_norm));
  enddef;

  def comp tropomyosin_cross_bridges as
    var f_01: per_second {pub: out};
    var f_12: per_second {pub: out};
    var f_23: per_second {pub: out};
    var g_XB: per_second {init: 30.0, pub: out};
    var SL: micrometre {init: 2.15, pub: out};
    var P1: dimensionless {init: 1.47026E-6, pub: out};
    var P2: dimensionless {init: 1.83527E-6, pub: out};
    var P3: dimensionless {init: 1.06786E-6, pub: out};
    var N1: dimensionless {init: 3.88506E-6, pub: out};
    var f_XB: per_second {init: 10.0};
    var g_XB_SL: per_second;
    var g_01_SL: per_second;
    var g_12_SL: per_second;
    var g_23_SL: per_second;
    var N0: dimensionless {init: 0.99999027};
    var P0: dimensionless {init: 1.46758E-6};
    var SL_norm: micrometre;
    var N_trop: micrometre;
    var K_trop: micromolar;
    var k_trop_pn: micromolar;
    var k_trop_np: micromolar;
    var K_trop_half: micromolar;
    var K_trop_Ca: micromolar;
    var time: millisecond {pub: in};
    var k_ltrpn_plus: per_micromolar_per_second {pub: in};
    var k_ltrpn_minus: per_micromolar_per_second {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    var LTRPN_tot: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    var LTRPNCa: millimolar {pub: in};
    f_01 = 3.0{dimensionless}*f_XB;
    f_12 = 10.0{dimensionless}*f_XB;
    f_23 = 7.0{dimensionless}*f_XB;
    g_01_SL = 1.0{dimensionless}*g_XB_SL;
    g_12_SL = 2.0{dimensionless}*g_XB_SL;
    g_23_SL = 3.0{dimensionless}*g_XB_SL;
    g_XB_SL = g_XB*(1.0{micrometre}+pow(1.0{micrometre}-SL_norm, 1.6{dimensionless}));
    SL_norm = (SL-1.7{micrometre})/0.7{micrometre};
    k_trop_np = k_trop_pn*pow(LTRPNCa/LTRPN_tot/K_trop_half, N_trop);
    N_trop = 3.5{dimensionless}+2.5{dimensionless}*SL_norm;
    K_trop_half = pow(1.0{dimensionless}+K_trop_Ca/(1.7{micromolar}-0.9{micromolar}*SL_norm), -1.0{dimensionless});
    K_trop_Ca = k_ltrpn_minus/k_ltrpn_plus;
    ode(N0, time) = k_trop_pn*P0-k_trop_np*N0+g_01_SL*N1;
    ode(P0, time) = -((k_trop_pn+f_01)*P0)+k_trop_np*N0+g_01_SL*P1;
    ode(P1, time) = -((k_trop_pn+f_12+g_01_SL)*P1)+k_trop_np*N1+k_trop_np*N1+f_01*P0+g_12_SL*P2;
    ode(P2, time) = -((f_23+g_12_SL)*P2)+f_12*P1+g_23_SL*P3;
    ode(P3, time) = -g_23_SL*P3+f_23*P2;
  enddef;

  def comp force_computation as
    var Force_norm: N_per_mm2 {pub: out};
    var Force: N_per_mm2;
    var Force_max: N_per_mm2;
    var zeta: N_per_mm2 {init: 0.1};
    var phi_SL: dimensionless;
    var P1_max: per_second;
    var P2_max: per_second;
    var P3_max: per_second;
    var time: millisecond {pub: in};
    var SL: micrometre {pub: in};
    var P1: dimensionless {pub: in};
    var P2: dimensionless {pub: in};
    var P3: dimensionless {pub: in};
    var N1: dimensionless {pub: in};
    var f_01: per_second {pub: in};
    var f_12: per_second {pub: in};
    var f_23: per_second {pub: in};
    var g_XB: per_second {pub: in};
    Force = zeta*Force_norm;
    Force_norm = phi_SL*((P1+N1+2.0{dimensionless}*P2+3.0{dimensionless}*P3)/Force_max);
    Force_max = P1_max+2.0{dimensionless}*P2_max+3.0{dimensionless}*P3_max;
    phi_SL = sel
      case (SL < 2.0{micrometre}) and (SL > 1.7{micrometre}):
        (SL-0.6{micrometre})/1.4{micrometre};
      case (SL < 2.2{micrometre}) and (SL > 2.0{micrometre}):
        1.0{dimensionless};
      case (SL < 2.3{micrometre}) and (SL > 2.2{micrometre}):
        (3.6{micrometre}-SL)/1.4{micrometre};
    endsel;
    P1_max = f_01*2.0{dimensionless}*g_XB*3.0{dimensionless}*g_XB/(g_XB*2.0{dimensionless}*g_XB*3.0{dimensionless}*g_XB+f_01*2.0{dimensionless}*g_XB*3.0{dimensionless}*g_XB+f_01*f_12*3.0{dimensionless}*g_XB+f_01*f_12*f_23);
    P2_max = f_01*f_12*3.0{dimensionless}*g_XB/(g_XB*2.0{dimensionless}*g_XB*3.0{dimensionless}*g_XB+f_01*2.0{dimensionless}*g_XB*3.0{dimensionless}*g_XB+f_01*f_12*3.0{dimensionless}*g_XB+f_01*f_12*f_23);
    P3_max = f_01*f_12*f_23/(g_XB*2.0{dimensionless}*g_XB*3.0{dimensionless}*g_XB+f_01*2.0{dimensionless}*g_XB*3.0{dimensionless}*g_XB+f_01*f_12*3.0{dimensionless}*g_XB+f_01*f_12*f_23);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_y_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_X_gate;
        comp time_dependent_potassium_current_Xi_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp plateau_potassium_current;
      comp sarcolemmal_calcium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp non_specific_calcium_activated_current;
      comp intracellular_Ca_fluxes;
      comp SERCA_pump;
      comp RyR_channel_states;
      comp intracellular_ionic_concentrations;
      comp troponin;
      comp tropomyosin_cross_bridges;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_y_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_X_gate;
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between RyR_channel_states and environment for
    vars time and time;
  enddef;
  def map between SERCA_pump and environment for
    vars time and time;
  enddef;
  def map between intracellular_Ca_fluxes and environment for
    vars time and time;
  enddef;
  def map between intracellular_ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between troponin and environment for
    vars time and time;
  enddef;
  def map between tropomyosin_cross_bridges and environment for
    vars time and time;
  enddef;
  def map between force_computation and environment for
    vars time and time;
  enddef;
  // Several variables are passed between the "membrane" and its sub-components.
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca and i_Ca;
    vars i_Ca_K and i_Ca_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars i_ns_Ca and i_ns_Ca;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and intracellular_ionic_concentrations for
    vars F and F;
  enddef;
  // Several variables are passed between the sibling components.
  def map between fast_sodium_current and intracellular_ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and intracellular_ionic_concentrations for
    vars Ca_SS and Ca_SS;
    vars i_Ca and i_Ca;
    vars i_Ca_K and i_Ca_K;
    vars Ki and Ki;
    vars Ko and Ko;
    vars Cao and Cao;
  enddef;
  def map between time_dependent_potassium_current and intracellular_ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_K and i_K;
  enddef;
  def map between Na_Ca_exchanger and intracellular_ionic_concentrations for
    vars Cao and Cao;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and intracellular_ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and intracellular_ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sodium_background_current and intracellular_ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between sarcolemmal_calcium_pump and intracellular_ionic_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between calcium_background_current and intracellular_ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and intracellular_ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and intracellular_ionic_concentrations for
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
    vars Cai and Cai;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ki and Ki;
    vars Ko and Ko;
  enddef;
  def map between intracellular_ionic_concentrations and cell_geometry for
    vars A_cap and A_cap;
    vars V_myo and V_myo;
    vars V_SS and V_SS;
    vars V_JSR and V_JSR;
    vars V_NSR and V_NSR;
  enddef;
  def map between RyR_channel_states and intracellular_Ca_fluxes for
    vars P_O1 and P_O1;
    vars P_O2 and P_O2;
  enddef;
  def map between RyR_channel_states and intracellular_ionic_concentrations for
    vars Ca_SS and Ca_SS;
  enddef;
  def map between intracellular_ionic_concentrations and SERCA_pump for
    vars J_up and J_up;
    vars Ca_NSR and Ca_NSR;
    vars Cai and Cai;
  enddef;
  def map between intracellular_Ca_fluxes and intracellular_ionic_concentrations for
    vars J_rel and J_rel;
    vars J_trpn and J_trpn;
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
    vars Ca_SS and Ca_SS;
    vars Ca_JSR and Ca_JSR;
    vars Ca_NSR and Ca_NSR;
    vars Cai and Cai;
  enddef;
  def map between intracellular_Ca_fluxes and troponin for
    vars HTRPNCa and HTRPNCa;
    vars HTRPN_tot and HTRPN_tot;
    vars LTRPNCa and LTRPNCa;
    vars LTRPN_tot and LTRPN_tot;
    vars k_htrpn_minus and k_htrpn_minus;
    vars k_htrpn_plus and k_htrpn_plus;
    vars k_ltrpn_minus and k_ltrpn_minus;
    vars k_ltrpn_plus and k_ltrpn_plus;
  enddef;
  def map between force_computation and troponin for
    vars Force_norm and Force_norm;
  enddef;
  def map between intracellular_ionic_concentrations and troponin for
    vars Cai and Cai;
  enddef;
  def map between troponin and tropomyosin_cross_bridges for
    vars k_ltrpn_minus and k_ltrpn_minus;
    vars k_ltrpn_plus and k_ltrpn_plus;
    vars LTRPNCa and LTRPNCa;
    vars LTRPN_tot and LTRPN_tot;
  enddef;
  def map between force_computation and tropomyosin_cross_bridges for
    vars f_01 and f_01;
    vars f_12 and f_12;
    vars f_23 and f_23;
    vars g_XB and g_XB;
    vars SL and SL;
    vars P1 and P1;
    vars P2 and P2;
    vars N1 and N1;
    vars P3 and P3;
  enddef;
  //
  // Various variables are passed between parent components and their
  // encapsulated gates.
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars time and time;
    vars V and V;
    vars E_K1 and E_K1;
    vars K1_infinity and K1_infinity;
  enddef;
enddef;
