<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" name="goldbeter_2006_1.1">
<component name="environment">
<variable name="time" public_interface="out" units="s"/>
</component>
<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="goldbeter_2006_units.cellml">
<units name="s" units_ref="s"/>
<units name="per_s" units_ref="per_s"/>
</import>
<component name="P">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>P</ci>
</apply>
<apply>
<minus/>
<apply>
<times/>
<ci>a</ci>
<ci>Q</ci>
</apply>
<apply>
<divide/>
<apply>
<times/>
<ci>b</ci>
<ci>P</ci>
</apply>
<apply>
<plus/>
<ci>K</ci>
<ci>P</ci>
</apply>
</apply>
</apply>
</apply>
</math>
<variable name="time" public_interface="in" units="s"/>
<variable initial_value="0" name="P" public_interface="out" units="dimensionless"/>
<variable name="Q" public_interface="in" units="dimensionless"/>
<variable initial_value="0.1" name="a" units="per_s"/>
<variable initial_value="0.1" name="b" units="per_s"/>
<variable initial_value="0.2" name="K" units="dimensionless"/>
</component>
<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="goldbeter_2006_law1.cellml">
<component component_ref="law1" name="law1_Pstar"/>
</import>
<component name="P_star">
<variable name="P_star" private_interface="in" units="dimensionless"/>
<variable name="V_3" private_interface="out" public_interface="in" units="per_s"/>
<variable name="V_4" private_interface="out" public_interface="in" units="per_s"/>
<variable name="K_3" private_interface="out" public_interface="in" units="dimensionless"/>
<variable name="K_4" private_interface="out" public_interface="in" units="dimensionless"/>
</component>
<group>
<relationship_ref relationship="encapsulation"/>
<component_ref component="P_star">
<component_ref component="law1_Pstar"/>
</component_ref>
</group>
<connection>
<map_components component_1="law1_Pstar" component_2="P_star"/>
<map_variables variable_1="A" variable_2="P_star"/>
<map_variables variable_1="B" variable_2="V_4"/>
<map_variables variable_1="C" variable_2="V_3"/>
<map_variables variable_1="D" variable_2="K_3"/>
<map_variables variable_1="E" variable_2="K_4"/>
</connection>
<component name="Q">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>Q</ci>
</apply>
<apply>
<minus/>
<apply>
<divide/>
<apply>
<times/>
<ci>V_1</ci>
<apply>
<minus/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">1</cn>
<ci>Q</ci>
</apply>
</apply>
<apply>
<plus/>
<ci>K_1</ci>
<apply>
<minus/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">1</cn>
<ci>Q</ci>
</apply>
</apply>
</apply>
<apply>
<divide/>
<apply>
<times/>
<ci>V_2</ci>
<ci>R</ci>
<ci>Q</ci>
</apply>
<apply>
<plus/>
<ci>K_2</ci>
<ci>Q</ci>
</apply>
</apply>
</apply>
</apply>
</math>
<variable name="time" public_interface="in" units="s"/>
<variable initial_value="0" name="Q" public_interface="out" units="dimensionless"/>
<variable name="R" public_interface="in" units="dimensionless"/>
<variable initial_value="1" name="V_1" public_interface="out" units="per_s"/>
<variable initial_value="1.5" name="V_2" public_interface="out" units="per_s"/>
<variable initial_value="0.01" name="K_1" public_interface="out" units="dimensionless"/>
<variable initial_value="0.01" name="K_2" public_interface="out" units="dimensionless"/>
</component>
<component name="R">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>R</ci>
</apply>
<apply>
<minus/>
<apply>
<divide/>
<apply>
<times/>
<ci>P</ci>
<ci>V_3</ci>
<apply>
<minus/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">1</cn>
<ci>R</ci>
</apply>
</apply>
<apply>
<plus/>
<ci>K_3</ci>
<apply>
<minus/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">1</cn>
<ci>R</ci>
</apply>
</apply>
</apply>
<apply>
<divide/>
<apply>
<times/>
<ci>V_4</ci>
<ci>R</ci>
</apply>
<apply>
<plus/>
<ci>K_4</ci>
<ci>R</ci>
</apply>
</apply>
</apply>
</apply>
</math>
<variable name="time" public_interface="in" units="s"/>
<variable name="P" public_interface="in" units="dimensionless"/>
<variable initial_value="0" name="R" public_interface="out" units="dimensionless"/>
<variable initial_value="6" name="V_3" public_interface="out" units="per_s"/>
<variable initial_value="2.5" name="V_4" public_interface="out" units="per_s"/>
<variable initial_value="0.01" name="K_3" public_interface="out" units="dimensionless"/>
<variable initial_value="0.01" name="K_4" public_interface="out" units="dimensionless"/>
</component>
<component name="R_star">
<variable name="R_star" private_interface="in" units="dimensionless"/>
<variable name="V_1" private_interface="out" public_interface="in" units="per_s"/>
<variable name="V_2" private_interface="out" public_interface="in" units="per_s"/>
<variable name="K_1" private_interface="out" public_interface="in" units="dimensionless"/>
<variable name="K_2" private_interface="out" public_interface="in" units="dimensionless"/>
</component>
<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="goldbeter_2006_law1.cellml">
<component component_ref="law1" name="law1_Rstar"/>
</import>
<group>
<relationship_ref relationship="encapsulation"/>
<component_ref component="R_star">
<component_ref component="law1_Rstar"/>
</component_ref>
</group>
<connection>
<map_components component_1="law1_Rstar" component_2="R_star"/>
<map_variables variable_1="A" variable_2="R_star"/>
<map_variables variable_1="B" variable_2="V_1"/>
<map_variables variable_1="C" variable_2="V_2"/>
<map_variables variable_1="D" variable_2="K_2"/>
<map_variables variable_1="E" variable_2="K_1"/>
</connection>
<connection>
<map_components component_1="environment" component_2="P"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="environment" component_2="Q"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="environment" component_2="R"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="P" component_2="Q"/>
<map_variables variable_1="Q" variable_2="Q"/>
</connection>
<connection>
<map_components component_1="P" component_2="R"/>
<map_variables variable_1="P" variable_2="P"/>
</connection>
<connection>
<map_components component_1="Q" component_2="R"/>
<map_variables variable_1="R" variable_2="R"/>
</connection>
<connection>
<map_components component_1="P_star" component_2="R"/>
<map_variables variable_1="V_3" variable_2="V_3"/>
<map_variables variable_1="V_4" variable_2="V_4"/>
<map_variables variable_1="K_3" variable_2="K_3"/>
<map_variables variable_1="K_4" variable_2="K_4"/>
</connection>
<connection>
<map_components component_1="R_star" component_2="Q"/>
<map_variables variable_1="V_1" variable_2="V_1"/>
<map_variables variable_1="V_2" variable_2="V_2"/>
<map_variables variable_1="K_1" variable_2="K_1"/>
<map_variables variable_1="K_2" variable_2="K_2"/>
</connection>
</model>