<?xml version='1.0'?>
<!--  FILE :  devries_model_2001.xml

CREATED :  9th May 2002

LAST MODIFIED : 9th April 2003

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of De Vries and Sherman's
2001 mathematical model of spiking to bursting via coupling in pancreatic beta cells.

CHANGES:  
  18/07/2002 - CML - Added more metadata.
  09/04/2003 - AAC - Added publication date information.  
-->
<model name="devries_sherman_2001_version01" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    <documentation xmlns="http://cellml.org/tmp-documentation">
        <article>
            <articleinfo>
                <title>From Spikers To Bursters Via Heterogeneity</title>
                <author>
                    <firstname>Catherine</firstname>
                    <surname>Lloyd</surname>
                    <affiliation>
                        <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
                    </affiliation>
                </author>
            </articleinfo>
            <section id="sec_status">
                <title>Model Status</title>
                <para>
            This model integrates in OpenCell to produce an oscillating output but this output has not been checked against the publication. 
          </para>
                <para>
ValidateCellML confirms this model as valid CellML but detects unit inconsistencies. We have checked this model and the unit inconsistency appears to be inherent in the publication. Attempting to balance the units by changing the units of <emphasis>tau</emphasis> from milliseconds to picofarads results in a broken simulation output.
</para>
            </section>
            <sect1 id="sec_structure">
                <title>Model Structure</title>
                <para>
When exposed to a threshold concentration of glucose, pancreatic beta-cells exhibit a complicated pattern of electrical activity.  Bursts of action potential spikes (the "active" phase) are observed, separated by a "silent" phase of membrane repolarisation.  At even higher glucose concentrations, continuous action potentials are seen.  This electrical activity has two important physiological correlates: increased cytosolic Ca<superscript>2+</superscript> concentration ([Ca<superscript>2+</superscript>]<subscript>i</subscript>) and increased rate of insulin secretion during the active phase.  It is generally accepted that the rise in [Ca<superscript>2+</superscript>]<subscript>i</subscript> plays a major role in insulin secretion and that the action potential spikes during a burst are responsible for the rise in [Ca<superscript>2+</superscript>]<subscript>i</subscript>.
</para>
                <para>
Normal bursting patterns are only observed when the beta-cells act synchronously, as they do <emphasis>in vivo</emphasis>, in electrically coupled organs called the islets of Langerhans.  Isolated spiking cells, incapable of bursting by themselves, may generate islet-like bursting rhythms when coupled.  There are three alternative hypotheses to explain why single cells and islets are different.  One of these emphasises heterogeneity: single cell properties are variable, and individual cells may fall outside the narrow parameter regime required for bursting.  By contrast, in coupled populations, cells with an excess of current can be balanced by cells with too little, and the population is more likely to achieve bursting.  A second hypothesis focuses on noise from stochastic channel fluctuations in individual cells preventing bursting by causing premature transitions between active and silent phases.  However, in large populations, fluctuations are buffered, allowing the underlying burst dynamics to be dominant.  A third alternative discusses the paracrine effects of glucagon secreted by alpha-cells in the islet, on beta-cells.
</para>
                <para>  
In their 2001 paper, Gerda De Vries and Arthur Sherman contrast the first two hypotheses.  They introduce a mathematical model for bursting in pancreatic beta-cells, which is a simplified version of the biophysically based, earlier model by Sherman and Rinzel (1992).  This model describes three ionic currents (see <xref linkend="fig_cell_diagram"/> below): a fast voltage-activated calcium current, I<subscript>Ca</subscript>; a delayed rectifier potassium current, I<subscript>K</subscript>; and a very slow inhibitory potassium current,  I<subscript>s</subscript>.  The calcium and delayed rectifier potassium currents are responsible for generating action potentials.  The slow potassium current plays no essential role in the individual cells but heterogeneity among the cells is generated by varying the value of the parameter beta.  Parameter values were chosen such that the individual cells are incapable of bursting.  De Vries and Sherman use their model to show bifurcation in a two-cell system, and they extrapolate this for larger clusters of coupled cells.
</para>
                <para>
The complete original paper reference is cited below:
</para>
                <para>
From Spikers to Bursters Via Coupling: Help From Heterogeneity, Gerda De Vries and Arthur Sherman, 2001,
            <emphasis>Bulletin of Mathematical Biology</emphasis>
         , 63, 371-391. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11276531&amp;dopt=Abstract">PubMed ID: 11276531</ulink>
                </para>
                <para>
The raw CellML description of the model can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>
                </para>
                <informalfigure float="0" id="fig_cell_diagram">
                    <mediaobject>
                        <imageobject>
                            <objectinfo>
                                <title>diagram of the model</title>
                            </objectinfo>
                            <imagedata fileref="devries_2001.png"/>
                        </imageobject>
                    </mediaobject>
                    <caption>A schematic representation of the three transmembrane currents captured by the De Vries and Sherman 2001 pancreatic beta-cell model.</caption>
                </informalfigure>
            </sect1>
        </article>
    </documentation>
    <!--
    Below, we define some additional units for association with variables and
    constants within the model. The identifiers are fairly self-explanatory.
  -->
    <units name="millisecond">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="millivolt">
        <unit prefix="milli" units="volt"/>
    </units>
    <units name="nanoS">
        <unit prefix="nano" units="siemens"/>
    </units>
    <units name="picoA">
        <unit prefix="pico" units="ampere"/>
    </units>
    <!--
    The "environment" component is used to declare variables that are used by
    all or most of the other components, in this case just "time".
  -->
    <component name="environment">
        <variable name="time" public_interface="out" units="millisecond"/>
    </component>
    <component cmeta:id="id_000000001" name="membrane">
        <variable name="V" public_interface="out" units="millivolt"/>
        <variable initial_value="20.0" name="tau" public_interface="out" units="millisecond"/>
        <variable name="time" public_interface="in" units="millisecond"/>
        <variable cmeta:id="id_000000003" name="i_K" public_interface="in" units="picoA"/>
        <variable cmeta:id="id_000000024" name="i_Ca" public_interface="in" units="picoA"/>
        <variable name="i_s" public_interface="in" units="picoA"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="membrane_voltage_diff_eq">
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci> time </ci>
                    </bvar>
                    <ci> V </ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <ci> i_Ca </ci>
                            <ci> i_K </ci>
                            <ci> i_s </ci>
                        </apply>
                    </apply>
                    <ci> tau </ci>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000002" name="calcium_current">
        <variable cmeta:id="id_000000020" name="i_Ca" public_interface="out" units="picoA"/>
        <variable cmeta:id="id_000000021" initial_value="3.6" name="g_Ca" units="nanoS"/>
        <variable cmeta:id="id_000000022" initial_value="25.0" name="V_Ca" units="millivolt"/>
        <variable name="time" public_interface="in" units="millisecond"/>
        <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
        <variable cmeta:id="id_000000023" name="m_infinity" private_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="i_Ca_calculation">
                <eq/>
                <ci> i_Ca </ci>
                <apply>
                    <times/>
                    <ci> g_Ca </ci>
                    <ci> m_infinity </ci>
                    <apply>
                        <minus/>
                        <ci> V </ci>
                        <ci> V_Ca </ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000016" name="calcium_current_m_gate">
        <variable cmeta:id="id_000000017" name="m_infinity" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="id_000000018" initial_value="-20.0" name="V_m" units="millivolt"/>
        <variable cmeta:id="id_000000019" initial_value="12.0" name="theta_m" units="millivolt"/>
        <variable name="V" public_interface="in" units="millivolt"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="m_infinity_calculation">
                <eq/>
                <ci> m_infinity </ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless"> 1.0 </cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless"> 1.0 </cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci> V_m </ci>
                                    <ci> V </ci>
                                </apply>
                                <ci> theta_m </ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000004" name="potassium_current">
        <variable cmeta:id="id_000000005" name="i_K" public_interface="out" units="picoA"/>
        <variable cmeta:id="id_000000006" initial_value="-75.0" name="V_K" public_interface="out" units="millivolt"/>
        <variable cmeta:id="id_000000007" initial_value="10.0" name="g_K" units="nanoS"/>
        <variable name="time" private_interface="out" public_interface="in" units="millisecond"/>
        <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
        <variable cmeta:id="id_000000008" name="tau" private_interface="out" public_interface="in" units="millisecond"/>
        <variable cmeta:id="id_000000009" name="n" private_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="i_K_calculation">
                <eq/>
                <ci> i_K </ci>
                <apply>
                    <times/>
                    <ci> g_K </ci>
                    <ci> n </ci>
                    <apply>
                        <minus/>
                        <ci> V </ci>
                        <ci> V_K </ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000010" name="potassium_current_n_gate">
        <variable cmeta:id="id_000000011" name="n" public_interface="out" units="dimensionless"/>
        <variable name="n_infinity" units="dimensionless"/>
        <variable initial_value="-16.0" name="V_n" units="millivolt"/>
        <variable cmeta:id="id_000000013" initial_value="5.6" name="theta_n" units="millivolt"/>
        <variable cmeta:id="id_000000014" initial_value="0.8" name="lamda" units="dimensionless"/>
        <variable name="V" public_interface="in" units="millivolt"/>
        <variable cmeta:id="id_000000015" name="tau" public_interface="in" units="millisecond"/>
        <variable name="time" public_interface="in" units="millisecond"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="n_diff_eq">
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci> time </ci>
                    </bvar>
                    <ci> n </ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci> lamda </ci>
                        <apply>
                            <minus/>
                            <ci> n_infinity </ci>
                            <ci> n </ci>
                        </apply>
                    </apply>
                    <ci> tau </ci>
                </apply>
            </apply>
            <apply id="n_infinity_calculation">
                <eq/>
                <ci> n_infinity </ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless"> 1.0 </cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless"> 1.0 </cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci> V_n </ci>
                                    <ci> V </ci>
                                </apply>
                                <ci> theta_n </ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="slow_current">
        <variable name="i_s" public_interface="out" units="picoA"/>
        <variable initial_value="4.0" name="g_s" units="nanoS"/>
        <variable name="time" private_interface="out" public_interface="in" units="millisecond"/>
        <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
        <variable name="V_K" public_interface="in" units="millivolt"/>
        <variable name="s" private_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="i_s_calculation">
                <eq/>
                <ci> i_s </ci>
                <apply>
                    <times/>
                    <ci> g_s </ci>
                    <ci> s </ci>
                    <apply>
                        <minus/>
                        <ci> V </ci>
                        <ci> V_K </ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="slow_current_s_gate">
        <variable name="s" public_interface="out" units="dimensionless"/>
        <variable name="s_infinity" units="dimensionless"/>
        <variable initial_value="-38.0" name="V_s" units="millivolt"/>
        <variable initial_value="10.0" name="theta_s" units="millivolt"/>
        <variable initial_value="0.0" name="beta" units="dimensionless"/>
        <variable initial_value="35000.0" name="tau_s" units="millisecond"/>
        <variable name="V" public_interface="in" units="millivolt"/>
        <variable name="time" public_interface="in" units="millisecond"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="s_diff_eq">
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci> time </ci>
                    </bvar>
                    <ci> s </ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <ci> s_infinity </ci>
                            <ci> s </ci>
                        </apply>
                        <ci> beta </ci>
                    </apply>
                    <ci> tau_s </ci>
                </apply>
            </apply>
            <apply id="s_infinity_calculation">
                <eq/>
                <ci> s_infinity </ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless"> 1.0 </cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless"> 1.0 </cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci> V_s </ci>
                                    <ci> V </ci>
                                </apply>
                                <ci> theta_s </ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="containment"/>
        <component_ref component="membrane">
            <component_ref component="calcium_current">
                <component_ref component="calcium_current_m_gate"/>
            </component_ref>
            <component_ref component="potassium_current">
                <component_ref component="potassium_current_n_gate"/>
            </component_ref>
            <component_ref component="slow_current">
                <component_ref component="slow_current_s_gate"/>
            </component_ref>
        </component_ref>
    </group>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="calcium_current">
            <component_ref component="calcium_current_m_gate"/>
        </component_ref>
        <component_ref component="potassium_current">
            <component_ref component="potassium_current_n_gate"/>
        </component_ref>
        <component_ref component="slow_current">
            <component_ref component="slow_current_s_gate"/>
        </component_ref>
    </group>
    <connection>
        <map_components component_1="membrane" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="calcium_current" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="slow_current" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="calcium_current" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="i_Ca" variable_2="i_Ca"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="i_K" variable_2="i_K"/>
        <map_variables variable_1="tau" variable_2="tau"/>
    </connection>
    <connection>
        <map_components component_1="slow_current" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="i_s" variable_2="i_s"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="slow_current"/>
        <map_variables variable_1="V_K" variable_2="V_K"/>
    </connection>
    <connection>
        <map_components component_1="calcium_current" component_2="calcium_current_m_gate"/>
        <map_variables variable_1="m_infinity" variable_2="m_infinity"/>
        <map_variables variable_1="V" variable_2="V"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="potassium_current_n_gate"/>
        <map_variables variable_1="n" variable_2="n"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="time" variable_2="time"/>
        <map_variables variable_1="tau" variable_2="tau"/>
    </connection>
    <connection>
        <map_components component_1="slow_current" component_2="slow_current_s_gate"/>
        <map_variables variable_1="s" variable_2="s"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <rdf:RDF>
        <rdf:Description rdf:about="#id_000000001">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0030322"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0060075"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0042391"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000003">
            <occursIn xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </occursIn>
            <occursIn xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </occursIn>
            <occursIn xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </occursIn>
            <occursIn xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </occursIn>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000015">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000014">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000013">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000011">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000010">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000009">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000008">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000007">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000006">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000005">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000004">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000016">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000017">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000018">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000019">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000002">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070978"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000020">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070978"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000021">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070978"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000022">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070978"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000023">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070978"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000024">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070978"/>
            </isVersionOf>
        </rdf:Description>
    </rdf:RDF>
</model>
