//   FILE :  bernus_model_2002.xml
//
// CREATED :  16th January 2003
//
// LAST MODIFIED : 4th August 2003
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Bernus et al's 2002
// computationally efficient electrophysiological model of human ventricular cells.
//
// CHANGES:
//   09/04/2003 - AAC - Added publication date information.
//   04/06/2003 - CML - Fixed MathML in a few components.
//   04/08/2003 - CML - Fixed MathML in a few components.
//   09/09/2003 - AAC - Fixed MathML in alpha_ and beta_d_calculation.
// publisher: The University of Auckland, Bioengineering Institute
// created: W3CDTF 2003-01-16T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2009-05-14T15:41:44+12:00; updated curation status in documentation deleted reference link from documentation; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2003-08-04; Corrected equations: E_to_calulation in transient_outward_current.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2003-09-09; Fixed MathML in alpha_ and beta_d_calculation.; Given Autumn; Family Cuellar; Other A.
// modification: W3CDTF 2003-06-04; Corrected equations: membrane_voltage_diff_eq in membrane, alpha_d_calculation in calcium_current_d_gate, tau_x_calculation in delayed_rectifier_potassium_current_x_gate, alpha_K1_calculation in inward_rectifier_potassium_current_K1_gate, and i_NaK_calculation in sodium_potassium_pump. Added v_x2_diff_calculation and v_y2_diff_calculation to membrane component.; Given Catherine; Family Lloyd; Other May
// title: Bernus et al's 2002 computationally efficient electrophysiological model of human ventricular cells.
// bio_entity: Ventricular Myocyte
// comment: FN Catherine Lloyd; This is a CellML description of Bernus et al's 2002 computationally efficient electrophysiological model of human ventricular cells.
// reference: subject_type keyword; ventricular myocyte; electrophysiology; human
// reference: Pubmed_id 12003840; Given O; Family Bernus; Given R; Family Wilders; Given C; Family Zemlin; Other W; Given H; Family Verschelde; Given A; Family Panfilov; Other V; title A computationally efficient electrophysiological model of human ventricular cells; volume 282; first_page H2296; title American Journal of Physiology; W3CDTF 2002-06; last_page H2308
// species: Homo sapiens
def model bernus_wilders_zemlin_verschelde_panfilov_2002_version01 as
  // A Computationally Efficient Electrophysiological Model of Human Ventricular Cells
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model contains partial differentials and as such can not currently be solved by existing CellML tools.
  //
  // ValidateCellML detects numerous unit inconsistencies within this model but otherwise verifies it as valid CellML.
  //
  // Model Structure
  //
  // Mathematical modelling of cells began over 50 years ago with the work of Hodgkin and Huxley (for the CellML version of the model, see The Hodgkin-Huxley Squid Axon Model, 1952). The first model of cardiac tissue was developed by Noble in 1962 (see Noble Purkinje Fibre Model, 1962), and contained only four variables. During the following years, improvements in both experimental and computational methods lead to the development of successively more accurate models, for example the Luo-Rudy Ventricular Model II (dynamic), 1994, and the Noble Ventricular Cell Model, 1998. Recently, comprehensive models have been published which are cell type specific, for example: Nygren et al., 1998; and Courtemanche et al., 1998 have developed models of atrial cells, while others have produced models of the sinoatrial node: Demir et al., 1999; Zhang et al., 2000; and Boyett et al., 2001, or ventricular myocytes: Puglisi-Bers, 2001 and Pandit et al., 2001.
  //
  // In 1998, Priebe and Beuckelmann published a model of a single human ventricular cell. This was based mainly on the Luo-Rudy II model for a guinea-pig ventricular myocyte, however, five currents (IKr , IKs , ICa , Ito and IK1 ) were based on experimental data obtained from human myocytes. The remaining currents from the original LR model were scaled to fit human cell data. Priebe and Beuckelmann used their model to compare the electrophysiological properties of healthy and failing ventricular myocytes. The model was accurate, but its complexity and large number of variables make it computationally inefficient. In addition, as a second-generation model, made up of ordinary differential equations describing the time dependence of membrane potential, gating variables and ion concentrations, the PB model was unstable.
  //
  // Often it is not necessary to model the ionic currents of a cell with the accuracy and complexity inherent in the biophysically based models. With a view to investigating phenomena on a larger spatial and temporal scale, several ionic current models have been developed that do not seek to model subcellular processes but only to provide an action potential at a minimal computational cost. Such models include The FitzHugh-Nagumo Model, 1961. However, this approach does not reproduce the shape of action potential, which is important in electrocardiography studies. Neither does it allow the analysis of the effects of individual ionic currents on cardiac activation.
  //
  // In 2002, Bernus et al. published a mathematical model of human ventricular cells, which was somewhere in between the complex PB and the simple FN models. Their new model was simpler, 4.9 times faster, and more stable than the original PB model on which it was based, yet it was sufficiently complex to retain the shape of the action potential at various frequencies, and also the restitution properties of the human ventricular tissue. This was achieved by reducing the original PB model to a six-variable model (see below). Major ionic currents were retained, but some single cell properties that do not have a large influence on the properties of the tissue were discarded. Model simulations were able to reproduce the properties of epicardial, endocardial and M cells by modifying selected ionic currents (this raw CellML model is specific to the epicardial cells). In addition, at the tissue level, Bernus et al. were able to simulate spiral wave behaviour in a 2-D sheet of human ventricular tissue. Simulation results were supported by their agreement with experimental data.
  //
  // The complete original paper reference is cited below:
  //
  // A computationally efficient electrophysiological model of human ventricular cells, O. Bernus, R. Wilders, C. W. Zemlin, H. Verschelde, and A. V. Panfilov, 2002, American Journal of Physiology , 282, H2296-H2308. PubMed ID: 12003840 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12003840&dopt=Abstract)
  //
  // diagram of the model
  //
  // A schematic representation of the ionic currents described by the Bernus et al. 2002 model of a human ventricular cell. The model includes a rapid sodium current, INa; a slow calcium current, ICa; a transient outward current, Ito; a delayed rectifier potassium current, IK; an inward rectifier potassium current, IK1; background sodium and calcium currents, INa,b and ICa,b; a sodium-potassium pump, INaK; and a sodium-calcium exchanger, INaCa.
  // Below, are defined some additional units for association with variables and
  // constants within the model.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: micro};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_micrometre as
    unit metre {pref: micro, expo: -1};
  enddef;
  def unit ohm_cm as
    unit ohm;
    unit metre {pref: centi};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb {expo: -1};
    unit mole;
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {pub: out, init: -90.2};
    var R: millijoule_per_mole_kelvin {pub: out, init: 8314.0};
    var T: kelvin {pub: out, init: 310.0};
    var F: coulomb_per_mole {pub: out, init: 96845.0};
    var Cm: picoF {init: 153.4};
    var x: micrometre {init: 100.0};
    var y: micrometre {init: 22.0};
    var rho_x: ohm_cm {init: 180.0};
    var rho_y: ohm_cm {init: 180.0};
    var S: per_micrometre {init: 0.2};
    var V_x2: dimensionless;
    var V_y2: dimensionless;
    var time: millisecond {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_Ca: picoA_per_picoF {pub: in};
    var i_to: picoA_per_picoF {pub: in};
    var i_K: picoA_per_picoF {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_b_Na: picoA_per_picoF {pub: in};
    var i_b_Ca: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    ode(V, time) = (-(i_Na+i_Ca+i_to+i_K+i_K1+i_b_Na+i_b_Ca+i_NaCa+i_NaK)+pow(rho_x*S, -1.0{dimensionless})*V_x2+pow(rho_y*S, -1.0{dimensionless})*V_y2)/Cm;
    partialdiff(V, x, 2.0{dimensionless}, 2.0{dimensionless}) = V_x2;
    partialdiff(V, y, 2.0{dimensionless}, 2.0{dimensionless}) = V_y2;
  enddef;

  def comp sodium_current as
    var i_Na: picoA_per_picoF {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: nanoS_per_picoF {init: 16.0};
    var Na_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var v: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*sqr(v)*(V-E_Na);
    E_Na = R*T/F*ln(Na_e/Na_i);
  enddef;

  def comp sodium_current_m_gate as
    var m: dimensionless {pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(m, time) = alpha_m*(1.0{per_millivolt}-m)-beta_m*m;
    alpha_m = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1.0{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11.0{millivolt});
  enddef;

  def comp sodium_current_v_gate as
    var v: dimensionless {pub: out};
    var v_infinity: dimensionless;
    var tau_v: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(v, time) = (v_infinity-v)/tau_v;
    v_infinity = 0.5{dimensionless}*(1.0{dimensionless}-tanh(7.74{millivolt}+V*0.12{dimensionless}));
    tau_v = 0.25{millisecond}+2.24{millisecond}*((1.0{dimensionless}-tanh(7.74{millivolt}+V*0.12{dimensionless}))/(1.0{dimensionless}-tanh(0.07{dimensionless}*(V+92.4{millivolt}))));
  enddef;

  def comp calcium_current as
    var i_Ca: picoA_per_picoF {pub: out};
    var E_Ca: millivolt {pub: out};
    var g_Ca: nanoS_per_picoF {init: 0.064};
    var Ca_e: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_i: millimolar {pub: in, priv: out};
    var d_infinity: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_Ca = g_Ca*d_infinity*f*f_Ca*(V-E_Ca);
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_e/Ca_i);
  enddef;

  def comp calcium_current_d_gate as
    var d_infinity: dimensionless {pub: out};
    var alpha_d: per_millisecond;
    var beta_d: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    d_infinity = alpha_d/(alpha_d+beta_d);
    alpha_d = 14.98{per_millisecond}*exp(-0.5{dimensionless}*sqr((V-22.36{millivolt})/16.68{millivolt}))/(16.68{dimensionless}*sqrt(2.0{dimensionless}*pi));
    beta_d = 0.1471{per_millisecond}-5.3{per_millisecond}*exp(-0.5{dimensionless}*sqr((V-6.27{millivolt})/14.93{millivolt}))/(14.93{dimensionless}*sqrt(2.0{dimensionless}*pi));
  enddef;

  def comp calcium_current_f_gate as
    var f: dimensionless {pub: out};
    var alpha_f: per_millisecond;
    var beta_f: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(f, time) = alpha_f*(1.0{per_millivolt}-f)-beta_f*f;
    alpha_f = 6.87e-3{per_millisecond}/(1.0{dimensionless}+exp(-(6.1546{millivolt}-V)/6.12{millivolt}));
    beta_f = (0.069{per_millisecond}*exp(-11.0{dimensionless}*(V+9.825{millivolt}))+0.011{per_millisecond})/(1.0{dimensionless}+exp(-0.278{dimensionless}*(V+9.825{millivolt})))+5.75e-4{per_millisecond};
  enddef;

  def comp calcium_current_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Ca_i: millimolar {pub: in};
    f_Ca = 1.0{dimensionless}/(1.0{dimensionless}+Ca_i/0.0006{millimolar});
  enddef;

  def comp transient_outward_current as
    var i_to: picoA_per_picoF {pub: out};
    var g_to: nanoS_per_picoF {init: 0.4};
    var E_to: millivolt;
    var Na_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in, priv: out};
    var time: millisecond {pub: in, priv: out};
    var to: dimensionless {priv: in};
    var r_infinity: dimensionless {priv: in};
    i_to = g_to*r_infinity*to*(V-E_to);
    E_to = R*T/F*ln((0.043{dimensionless}*Na_e+K_e)/(0.043{dimensionless}*Na_i+K_i));
  enddef;

  def comp transient_outward_current_r_gate as
    var r_infinity: dimensionless {pub: out};
    var alpha_r: per_millisecond;
    var beta_r: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    r_infinity = alpha_r/(alpha_r+beta_r);
    alpha_r = 0.5266{per_millisecond}*exp(-0.0166{dimensionless}*(V-42.2912{millivolt}))/(1.0{dimensionless}+exp(-0.0943{dimensionless}*(V-42.2912{millivolt})));
    beta_r = (5.186e-5{per_millivolt_millisecond}*V+0.5149{dimensionless}*exp(-0.1344{dimensionless}*(V-5.0027{millivolt})))/(1.0{dimensionless}+exp(-0.1348{dimensionless}*(V-5.186e-5{millivolt})));
  enddef;

  def comp transient_outward_current_to_gate as
    var to: dimensionless {pub: out};
    var alpha_to: per_millisecond;
    var beta_to: per_millisecond;
    var to_infinity: dimensionless;
    var tau_to: millisecond;
    var V_shift: millivolt {init: 0.0};
    var p: dimensionless {init: 1.0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(to, time) = alpha_to*(1.0{per_millivolt}-to)-beta_to*to;
    alpha_to = (5.612e-5{per_millivolt_millisecond}*V+0.0721{dimensionless}*exp(-0.173{dimensionless}*(V+34.2531{millivolt})))/(1.0{dimensionless}+exp(-0.1732{dimensionless}*(V+34.2531{millivolt})));
    beta_to = (1.215e-4{per_millivolt_millisecond}*V+0.0767{dimensionless}*exp(1.66e-9{dimensionless}*(V+34.0235{millivolt})))/(1.0{dimensionless}+exp(-0.1604{dimensionless}*(V+34.0235{millivolt})));
    tau_to = 1.0{millisecond}/(p*alpha_to*V+p*beta_to*V);
    to_infinity = alpha_to*(V-V_shift)/(alpha_to*(V-V_shift)+beta_to*(V-V_shift));
  enddef;

  def comp delayed_rectifier_potassium_current as
    var i_K: picoA_per_picoF {pub: out};
    var E_K: millivolt {pub: out};
    var g_K: nanoS_per_picoF {init: 0.019};
    var K_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var X: dimensionless {priv: in};
    i_K = g_K*sqr(X)*(V-E_K);
    E_K = R*T/F*ln(K_e/K_i);
  enddef;

  def comp delayed_rectifier_potassium_current_X_gate as
    var X: dimensionless {pub: out};
    var X_infinity: dimensionless;
    var tau_X: millisecond;
    var tau_X_a: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(X, time) = (X_infinity-X)/tau_X;
    X_infinity = 0.988{dimensionless}/(1.0{dimensionless}+exp(-0.861{millivolt}-V*0.0620{dimensionless}));
    tau_X = 240.0{millisecond}*exp(-sqr(25.5{millivolt}+V)/156.0{millivolt})+182.0{millisecond}*(1.0{dimensionless}+tanh(0.154{millivolt}+0.0116{dimensionless}*V))+tau_X_a;
    tau_X_a = 40.0{millisecond}*(1.0{dimensionless}-tanh(160.0{millivolt}+2.0{dimensionless}*V));
  enddef;

  def comp inward_rectifier_potassium_current as
    var i_K1: picoA_per_picoF {pub: out};
    var g_K1: nanoS_per_picoF {init: 3.9};
    var E_K: millivolt {pub: in, priv: out};
    var time: millisecond {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var K1_infinity: dimensionless {priv: in};
    i_K1 = g_K1*K1_infinity*(V-E_K);
  enddef;

  def comp inward_rectifier_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_millisecond;
    var beta_K1: per_millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
    alpha_K1 = 0.1{per_millisecond}/(1.0{dimensionless}+exp(0.06{dimensionless}*(V-(E_K+200.0{millivolt}))));
    beta_K1 = (3.0{dimensionless}*exp(2.0e-4{dimensionless}*(V+100.0{millivolt}+(-E_K)))+exp(0.1{dimensionless}*(V-(10.0{millivolt}+E_K))))/(1.0{dimensionless}+exp(-0.5{dimensionless}*(V-E_K)));
  enddef;

  def comp calcium_background_current as
    var i_b_Ca: picoA_per_picoF {pub: out};
    var g_b_Ca: nanoS_per_picoF {init: 0.00085};
    var E_Ca: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_b_Ca*(V-E_Ca);
  enddef;

  def comp sodium_background_current as
    var i_b_Na: picoA_per_picoF {pub: out};
    var g_b_Na: nanoS_per_picoF {init: 0.001};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_b_Na*(V-E_Na);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA_per_picoF {pub: out};
    var g_NaK: nanoS_per_picoF {init: 1.3};
    var f_NaK: dimensionless;
    var f_NaK_a: dimensionless;
    var sigma: dimensionless;
    var Na_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaK = g_NaK*f_NaK*f_NaK_a;
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.0037{dimensionless}*V)+0.0365{dimensionless}*sigma*exp(-0.037{dimensionless}*V));
    f_NaK_a = 1.0{dimensionless}/(1.0{dimensionless}+pow(10.0{millimolar}/Na_i, 1.5{dimensionless}))*(K_e/(K_e+1.5{millimolar}));
    sigma = 0.1428{dimensionless}*(exp(Na_e/67.3{millimolar})-1.0{dimensionless});
  enddef;

  def comp sodium_calcium_pump as
    var i_NaCa: picoA_per_picoF {pub: out};
    var f_NaCa: dimensionless;
    var g_NaCa: nanoS_per_picoF {init: 1000.0};
    var Na_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_e: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaCa = g_NaCa*f_NaCa;
    f_NaCa = pow(pow(87.5{millimolar}, 3.0{dimensionless})+pow(Na_e, 3.0{dimensionless}), -1.0{dimensionless})*pow(1.38{millimolar}+Ca_e, -1.0{dimensionless})*pow(1.0{dimensionless}+0.1{dimensionless}*exp(-0.024{dimensionless}*V), -1.0{dimensionless})*(pow(Na_i, 3.0{dimensionless})*Ca_e*exp(0.013{dimensionless}*V)-pow(Na_e, 3.0{dimensionless})*Ca_i*exp(-0.024{dimensionless}*V));
  enddef;

  def comp ionic_concentrations as
    var Na_i: millimolar {pub: out, init: 10.0};
    var Na_e: millimolar {pub: out, init: 138.0};
    var Ca_i: millimolar {pub: out, init: 0.0004};
    var Ca_e: millimolar {pub: out, init: 2.0};
    var K_i: millimolar {pub: out, init: 140.0};
    var K_e: millimolar {pub: out, init: 4.0};
  enddef;

  def group as containment for
    comp membrane incl
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_v_gate;
      endcomp;
      comp calcium_current incl
        comp calcium_current_d_gate;
        comp calcium_current_f_gate;
        comp calcium_current_f_Ca_gate;
      endcomp;
      comp transient_outward_current incl
        comp transient_outward_current_r_gate;
        comp transient_outward_current_to_gate;
      endcomp;
      comp delayed_rectifier_potassium_current incl
        comp delayed_rectifier_potassium_current_X_gate;
      endcomp;
      comp inward_rectifier_potassium_current incl
        comp inward_rectifier_potassium_current_K1_gate;
      endcomp;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_calcium_pump;
      comp sodium_potassium_pump;
      comp ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_v_gate;
    endcomp;
    comp calcium_current incl
      comp calcium_current_d_gate;
      comp calcium_current_f_gate;
      comp calcium_current_f_Ca_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_r_gate;
      comp transient_outward_current_to_gate;
    endcomp;
    comp delayed_rectifier_potassium_current incl
      comp delayed_rectifier_potassium_current_X_gate;
    endcomp;
    comp inward_rectifier_potassium_current incl
      comp inward_rectifier_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between calcium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier_potassium_current and inward_rectifier_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K and E_K;
    vars V and V;
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between membrane and sodium_current for
    vars i_Na and i_Na;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_current for
    vars i_Ca and i_Ca;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and transient_outward_current for
    vars i_to and i_to;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and delayed_rectifier_potassium_current for
    vars i_K and i_K;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and inward_rectifier_potassium_current for
    vars i_K1 and i_K1;
    vars V and V;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_calcium_pump for
    vars i_NaCa and i_NaCa;
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars i_NaK and i_NaK;
    vars V and V;
  enddef;
  def map between ionic_concentrations and sodium_current for
    vars Na_i and Na_i;
    vars Na_e and Na_e;
  enddef;
  def map between ionic_concentrations and calcium_current for
    vars Ca_i and Ca_i;
    vars Ca_e and Ca_e;
  enddef;
  def map between ionic_concentrations and transient_outward_current for
    vars Na_i and Na_i;
    vars Na_e and Na_e;
    vars K_i and K_i;
    vars K_e and K_e;
  enddef;
  def map between ionic_concentrations and delayed_rectifier_potassium_current for
    vars K_i and K_i;
    vars K_e and K_e;
  enddef;
  def map between ionic_concentrations and sodium_potassium_pump for
    vars Na_i and Na_i;
    vars K_e and K_e;
    vars Na_e and Na_e;
  enddef;
  def map between ionic_concentrations and sodium_calcium_pump for
    vars Na_i and Na_i;
    vars Na_e and Na_e;
    vars Ca_i and Ca_i;
    vars Ca_e and Ca_e;
  enddef;
  def map between sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between calcium_current and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between delayed_rectifier_potassium_current and inward_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between delayed_rectifier_potassium_current and delayed_rectifier_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_v_gate for
    vars v and v;
    vars time and time;
    vars V and V;
  enddef;
  def map between calcium_current and calcium_current_d_gate for
    vars d_infinity and d_infinity;
    vars time and time;
    vars V and V;
  enddef;
  def map between calcium_current and calcium_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between calcium_current and calcium_current_f_Ca_gate for
    vars Ca_i and Ca_i;
    vars f_Ca and f_Ca;
  enddef;
  def map between transient_outward_current and transient_outward_current_to_gate for
    vars to and to;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r_infinity and r_infinity;
    vars time and time;
    vars V and V;
  enddef;
enddef;
