<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" name="goldbeter_2007_1.1">
<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="goldbeter_2007_units.cellml">
<units name="nanomolar" units_ref="nanomolar"/>
<units name="minute" units_ref="minute"/>
<units name="flux" units_ref="flux"/>
<units name="first_order_rate_constant" units_ref="first_order_rate_constant"/>
<units name="second_order_rate_constant" units_ref="second_order_rate_constant"/>
</import>
<component name="environment">
<variable name="time" public_interface="out" units="minute"/>
</component>
<component name="RA">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>RA</ci>
</apply>
<apply>
<minus/>
<apply>
<minus/>
<ci>v_s1</ci>
<apply>
<times/>
<ci>k_d1</ci>
<ci>C</ci>
<ci>RA</ci>
</apply>
</apply>
<apply>
<times/>
<ci>k_d5</ci>
<ci>RA</ci>
</apply>
</apply>
</apply>
</math>
<variable initial_value="0.1" name="RA" public_interface="out" units="nanomolar"/>
<variable name="v_s1" public_interface="in" units="flux"/>
<variable name="k_d1" public_interface="in" units="second_order_rate_constant"/>
<variable initial_value="0.1" name="C" units="nanomolar"/>
<variable initial_value="0" name="k_d5" units="first_order_rate_constant"/>
<variable name="time" public_interface="in" units="minute"/>
</component>
<component name="M_C">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>M_C</ci>
</apply>
<apply>
<minus/>
<apply>
<plus/>
<ci>V_0</ci>
<apply>
<divide/>
<apply>
<times/>
<ci>V_sC</ci>
<apply>
<power/>
<ci>F</ci>
<ci>n</ci>
</apply>
</apply>
<apply>
<plus/>
<apply>
<power/>
<ci>K_A</ci>
<ci>n</ci>
</apply>
<apply>
<power/>
<ci>F</ci>
<ci>n</ci>
</apply>
</apply>
</apply>
</apply>
<apply>
<times/>
<ci>k_d3</ci>
<ci>M_C</ci>
</apply>
</apply>
</apply>
</math>
<variable initial_value="0.1" name="M_C" public_interface="out" units="nanomolar"/>
<variable initial_value="0.365" name="V_0" units="flux"/>
<variable initial_value="7.1" name="V_sC" units="flux"/>
<variable name="F" public_interface="in" units="nanomolar"/>
<variable initial_value="2" name="n" units="dimensionless"/>
<variable initial_value="0.2" name="K_A" units="nanomolar"/>
<variable name="k_d3" public_interface="in" units="first_order_rate_constant"/>
<variable name="time" public_interface="in" units="minute"/>
</component>
<component name="C">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>C</ci>
</apply>
<apply>
<minus/>
<apply>
<times/>
<ci>k_s2</ci>
<ci>M_C</ci>
</apply>
<apply>
<times/>
<ci>k_d2</ci>
<ci>C</ci>
</apply>
</apply>
</apply>
</math>
<variable initial_value="0.1" name="C" units="nanomolar"/>
<variable name="k_s2" public_interface="in" units="first_order_rate_constant"/>
<variable name="M_C" public_interface="in" units="nanomolar"/>
<variable name="k_d2" public_interface="in" units="first_order_rate_constant"/>
<variable name="time" public_interface="in" units="minute"/>
</component>
<component name="F">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<apply>
<diff/>
<bvar>
<ci>time</ci>
</bvar>
<ci>F</ci>
</apply>
<apply>
<minus/>
<apply>
<divide/>
<apply>
<times/>
<ci>k_s3</ci>
<ci>M_F</ci>
<apply>
<power/>
<ci>K_I</ci>
<ci>m</ci>
</apply>
</apply>
<apply>
<plus/>
<apply>
<power/>
<ci>K_I</ci>
<ci>m</ci>
</apply>
<apply>
<power/>
<ci>RA</ci>
<ci>m</ci>
</apply>
</apply>
</apply>
<apply>
<times/>
<ci>k_d4</ci>
<ci>F</ci>
</apply>
</apply>
</apply>
</math>
<variable initial_value="0.0001" name="F" public_interface="out" units="nanomolar"/>
<variable name="k_s3" public_interface="in" units="first_order_rate_constant"/>
<variable name="M_F" public_interface="in" units="nanomolar"/>
<variable initial_value="2" name="m" units="dimensionless"/>
<variable initial_value="0.2" name="K_I" units="nanomolar"/>
<variable name="RA" public_interface="in" units="nanomolar"/>
<variable name="k_d4" public_interface="in" units="first_order_rate_constant"/>
<variable name="time" public_interface="in" units="minute"/>
</component>
<component name="v_s1">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<ci>v_s1</ci>
<apply>
<times/>
<ci>k_s1</ci>
<ci>RALDH2_0</ci>
<apply>
<minus/>
<cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">1</cn>
<apply>
<divide/>
<ci>x</ci>
<ci>L</ci>
</apply>
</apply>
</apply>
</apply>
</math>
<variable name="v_s1" public_interface="out" units="flux"/>
<variable name="k_s1" public_interface="in" units="first_order_rate_constant"/>
<variable name="RALDH2_0" public_interface="in" units="nanomolar"/>
<variable name="x" public_interface="in" units="dimensionless"/>
<variable name="L" public_interface="in" units="dimensionless"/>
</component>
<component name="M_F">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<ci>M_F</ci>
<apply>
<divide/>
<apply>
<times/>
<ci>M_0</ci>
<ci>x</ci>
</apply>
<ci>L</ci>
</apply>
</apply>
</math>
<variable name="M_F" public_interface="out" units="nanomolar"/>
<variable name="M_0" public_interface="in" units="nanomolar"/>
<variable name="x" public_interface="in" units="dimensionless"/>
<variable name="L" public_interface="in" units="dimensionless"/>
</component>
<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="goldbeter_2007_law1.cellml">
<component component_ref="law1" name="law1_alpha"/>
</import>
<component name="alpha_1">
<variable name="alpha_1" private_interface="in" public_interface="out" units="dimensionless"/>
<variable name="RA" private_interface="out" public_interface="in" units="nanomolar"/>
<variable name="K_r1" private_interface="out" public_interface="in" units="nanomolar"/>
</component>
<group>
<relationship_ref relationship="encapsulation"/>
<component_ref component="alpha_1">
<component_ref component="law1_alpha"/>
</component_ref>
</group>
<connection>
<map_components component_1="law1_alpha" component_2="alpha_1"/>
<map_variables variable_1="A" variable_2="alpha_1"/>
<map_variables variable_1="B" variable_2="RA"/>
<map_variables variable_1="C" variable_2="K_r1"/>
</connection>
<component name="alpha_2">
<variable name="alpha_2" private_interface="in" public_interface="out" units="dimensionless"/>
<variable name="F" private_interface="out" public_interface="in" units="nanomolar"/>
<variable name="K_r2" private_interface="out" public_interface="in" units="nanomolar"/>
</component>
<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="goldbeter_2007_law1.cellml">
<component component_ref="law1" name="law1_alpha2"/>
</import>
<group>
<relationship_ref relationship="encapsulation"/>
<component_ref component="alpha_2">
<component_ref component="law1_alpha2"/>
</component_ref>
</group>
<connection>
<map_components component_1="law1_alpha2" component_2="alpha_2"/>
<map_variables variable_1="A" variable_2="alpha_2"/>
<map_variables variable_1="B" variable_2="F"/>
<map_variables variable_1="C" variable_2="K_r2"/>
</connection>
<component name="rho">
<math xmlns="http://www.w3.org/1998/Math/MathML">
<apply>
<eq/>
<ci>rho</ci>
<apply>
<divide/>
<ci>alpha_2</ci>
<ci>alpha_1</ci>
</apply>
</apply>
</math>
<variable name="rho" public_interface="out" units="dimensionless"/>
<variable name="alpha_1" public_interface="in" units="dimensionless"/>
<variable name="alpha_2" public_interface="in" units="dimensionless"/>
</component>
<component name="parameters">
<variable initial_value="5" name="M_0" public_interface="out" units="nanomolar"/>
<variable initial_value="15" name="x" public_interface="out" units="dimensionless"/>
<variable initial_value="50" name="L" public_interface="out" units="dimensionless"/>
<variable initial_value="1" name="k_s1" public_interface="out" units="first_order_rate_constant"/>
<variable initial_value="1" name="k_s2" public_interface="out" units="first_order_rate_constant"/>
<variable initial_value="1" name="k_s3" public_interface="out" units="first_order_rate_constant"/>
<variable initial_value="1" name="k_d3" public_interface="out" units="first_order_rate_constant"/>
<variable initial_value="1" name="k_d4" public_interface="out" units="first_order_rate_constant"/>
<variable initial_value="1" name="k_d1" public_interface="out" units="second_order_rate_constant"/>
<variable initial_value="0.28" name="k_d2" public_interface="out" units="first_order_rate_constant"/>
<variable initial_value="7.1" name="RALDH2_0" public_interface="out" units="nanomolar"/>
<variable initial_value="1" name="K_r1" public_interface="out" units="nanomolar"/>
<variable initial_value="1" name="K_r2" public_interface="out" units="nanomolar"/>
</component>
<connection>
<map_components component_1="environment" component_2="RA"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="environment" component_2="M_C"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="environment" component_2="C"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="environment" component_2="F"/>
<map_variables variable_1="time" variable_2="time"/>
</connection>
<connection>
<map_components component_1="RA" component_2="F"/>
<map_variables variable_1="RA" variable_2="RA"/>
</connection>
<connection>
<map_components component_1="M_C" component_2="C"/>
<map_variables variable_1="M_C" variable_2="M_C"/>
</connection>
<connection>
<map_components component_1="M_C" component_2="F"/>
<map_variables variable_1="F" variable_2="F"/>
</connection>
<connection>
<map_components component_1="rho" component_2="alpha_1"/>
<map_variables variable_1="alpha_1" variable_2="alpha_1"/>
</connection>
<connection>
<map_components component_1="rho" component_2="alpha_2"/>
<map_variables variable_1="alpha_2" variable_2="alpha_2"/>
</connection>
<connection>
<map_components component_1="alpha_1" component_2="RA"/>
<map_variables variable_1="RA" variable_2="RA"/>
</connection>
<connection>
<map_components component_1="alpha_2" component_2="F"/>
<map_variables variable_1="F" variable_2="F"/>
</connection>
<connection>
<map_components component_1="v_s1" component_2="parameters"/>
<map_variables variable_1="k_s1" variable_2="k_s1"/>
<map_variables variable_1="RALDH2_0" variable_2="RALDH2_0"/>
<map_variables variable_1="x" variable_2="x"/>
<map_variables variable_1="L" variable_2="L"/>
</connection>
<connection>
<map_components component_1="M_F" component_2="parameters"/>
<map_variables variable_1="x" variable_2="x"/>
<map_variables variable_1="L" variable_2="L"/>
<map_variables variable_1="M_0" variable_2="M_0"/>
</connection>
<connection>
<map_components component_1="RA" component_2="v_s1"/>
<map_variables variable_1="v_s1" variable_2="v_s1"/>
</connection>
<connection>
<map_components component_1="F" component_2="M_F"/>
<map_variables variable_1="M_F" variable_2="M_F"/>
</connection>
<connection>
<map_components component_1="alpha_1" component_2="parameters"/>
<map_variables variable_1="K_r1" variable_2="K_r1"/>
</connection>
<connection>
<map_components component_1="alpha_2" component_2="parameters"/>
<map_variables variable_1="K_r2" variable_2="K_r2"/>
</connection>
<connection>
<map_components component_1="RA" component_2="parameters"/>
<map_variables variable_1="k_d1" variable_2="k_d1"/>
</connection>
<connection>
<map_components component_1="M_C" component_2="parameters"/>
<map_variables variable_1="k_d3" variable_2="k_d3"/>
</connection>
<connection>
<map_components component_1="C" component_2="parameters"/>
<map_variables variable_1="k_s2" variable_2="k_s2"/>
<map_variables variable_1="k_d2" variable_2="k_d2"/>
</connection>
<connection>
<map_components component_1="F" component_2="parameters"/>
<map_variables variable_1="k_s3" variable_2="k_s3"/>
<map_variables variable_1="k_d4" variable_2="k_d4"/>
</connection>
</model>