// title: Na Channel Mutation That Causes Both Brugada Syndrome and Long-QT Syndrome Phenotypes: A Simulation Study of Mechanism (INa1795insD Mutant Midmyocardial Cell)
// publisher: The University of Auckland, The Bioengineering Institute
// comment: FN James Lawson; This model is currently unable to be supported due to its dependence on the Luo Rudy 1994 model, which contains delay elements in its model of the CIRC, which can not yet be represented in CellML (as of CellML 1.1). Therefore this model is unconstrained and does not load or run in any simulator.
// created: W3CDTF 2003-08-20T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2009-06-05T15:14:35+12:00; updated curation status, removed publication link in documentation; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-08-16T12:26:07+12:00; Added value of 1.5e-2 to variable I_NaK (note, not i_NaK) in component "sodium_potassium_pump". This value was obtained from the LR94 dynamic model; Given James; Family Lawson; Other Richard
// title: The Clancy and Rudy's 2002 mathematical model of a Na channel mutation that causes both Brugada and long-QT syndrome phenotypes.
// bio_entity: Ventricular Myocyte
// comment: FN Catherine Lloyd; This is the CellML description of Clancy and Rudy's 2002 mathematical model of a Na channel mutation that causes both Brugada and long-QT syndrome phenotypes.
// reference: Pubmed_id 11889015; Given Colleen; Family Clancy; Other E; Given Yoram; Family Rudy; title Na Channel Mutation That Causes Both Brugada Syndrome and Long-QT Syndrome Phenotypes: A Simulation Study of Mechanism; volume 105; first_page 1208; title Circulation; W3CDTF 2002-03-12; last_page 1213
// reference: subject_type keyword; cardiac; Brugada Syndrome; Long QT Syndrome; electrophysiology; na channel
// species: Mammalia
def model clancy_rudy_2002 as
  // Na+ Channel Mutation That Causes Both Brugada and Long-QT Syndrome Phenotypes: A Simulation Study of Mechanism
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model represents the INa1795insD M cell. For more details on the curation status of this model please see this separate notes document (Clancy_Rudy_Mutations.pdf).
  //
  // Model Structure
  //
  // ABSTRACT: BACKGROUND: Complex physiological interactions determine the functional consequences of gene abnormalities and make mechanistic interpretation of phenotypes extremely difficult. A recent example is a single mutation in the C terminus of the cardiac Na(+) channel, 1795insD. The mutation causes two distinct clinical syndromes, long QT (LQT) and Brugada, leading to life-threatening cardiac arrhythmias. Coexistence of these syndromes is seemingly paradoxical; LQT is associated with enhanced Na(+) channel function, and Brugada with reduced function. METHODS AND RESULTS: Using a computational approach, we demonstrate that the 1795insD mutation exerts variable effects depending on the myocardial substrate. We develop Markov models of the wild-type and 1795insD cardiac Na(+) channels. By incorporating the models into a virtual transgenic cell, we elucidate the mechanism by which 1795insD differentially disrupts cellular electrical behavior in epicardial and midmyocardial cell types. We provide a cellular mechanistic basis for the ECG abnormalities observed in patients carrying the 1795insD gene mutation. CONCLUSIONS: We demonstrate that the 1795insD mutation can cause both LQT and Brugada syndromes through interaction with the heterogeneous myocardium in a rate-dependent manner. The results highlight the complexity and multiplicity of genotype-phenotype relationships, and the usefulness of computational approaches in establishing a mechanistic link between genetic defects and functional abnormalities.
  //
  // The original paper reference is cited below:
  //
  // Na+ Channel Mutation That Causes Both Brugada and Long-QT Syndrome Phenotypes: A Simulation Study of Mechanism, Colleen E. Clancy and Yoram Rudy, 2002, Circulation , 105, 1208-1213. PubMed ID: 11889015 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=11889015&dopt=Abstract)
  //
  // cell diagram
  //
  // A Markovian model for the wild-type cardiac Na+ channel, embedded within an updated version of the Luo-Rudy dynamic model. C, indicates a closed channel state; IC, a closed-inactivation state; IF, a fast inactivation state; IM, an intermediate inactivation state, and O, an open state.
  //
  // cell diagram2
  //
  // A Markovian model for the mutant 1795insD cardiac Na+ channel, embedded within an updated version of the Luo-Rudy dynamic model. U (upper) indicates background mode of gating; L (lower), represents a small population of bursting channels which fail to inactivate.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: milli};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit nanoS_per_cm2 as
    unit siemens {pref: nano};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit millimolar_per_second as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -88.998, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var Cm: microF {init: 0.001};
    var I_st: microA_per_microF;
    var time: second {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_Ca_L: microA_per_microF {pub: in};
    var i_Ca_T: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K_Na: microA_per_microF {pub: in};
    var i_K_ATP: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_ns_Ca: microA_per_microF {pub: in};
    var dVdt: dimensionless {pub: out};
    var stim_start: second {init: 3};
    var stim_end: second {init: 9};
    var stim_period: dimensionless {init: 1};
    var stim_duration: second {init: 0.002};
    var stim_amplitude: microA_per_microF {init: -50};
    I_st = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Na+i_Ca_L+i_Ca_T+i_Kr+i_Ks+i_K_Na+i_K_ATP+i_to+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca+I_st);
    dVdt = -1{dimensionless}/Cm*(i_Na+i_Ca_L+i_Ca_T+i_Kr+i_Ks+i_K_Na+i_K_ATP+i_to+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca+I_st);
  enddef;

  def comp fast_sodium_current as
    var i_Na: microA_per_microF {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: milliS_per_microF {init: 23.5};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var P_O_Na: dimensionless {priv: in};
    i_Na = g_Na*P_O_Na*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp Na_channel_states as
    var P_O_Na: dimensionless {pub: out};
    var P_LO: dimensionless {init: 4.37e-17};
    var P_UO: dimensionless {init: 4.15e-13};
    var P_LC1: dimensionless {init: 5.68e-14};
    var P_LC2: dimensionless {init: 1.2e-11};
    var P_LC3: dimensionless {init: 9.535e-10};
    var P_UIF: dimensionless {init: 2.25e-10};
    var P_UC1: dimensionless {init: 5.399e-10};
    var P_UC2: dimensionless {init: 1.14e-7};
    var P_UC3: dimensionless {init: 9.06e-6};
    var P_UIC3: dimensionless {init: 3.778e-6};
    var P_UIC2: dimensionless {init: 4.758e-8};
    var P_UIM1: dimensionless {init: 6.49e-11};
    var P_UIM2: dimensionless {init: 1.075e-12};
    var alpha_11: per_second;
    var beta_11: per_second;
    var alpha_12: per_second;
    var beta_12: per_second;
    var alpha_13: per_second;
    var beta_13: per_second;
    var alpha_2: per_second;
    var beta_2: per_second;
    var alpha_3: per_second;
    var beta_3: per_second;
    var alpha_4: per_second;
    var beta_4: per_second;
    var alpha_5: per_second;
    var beta_5: per_second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    P_O_Na = P_LO+P_UO;
    ode(P_LC3, time) = -(9.5e-1{per_second}+alpha_11)*P_LC3+1e-4{per_second}*P_UC3+beta_11*P_LC2;
    ode(P_LC2, time) = -(beta_11+9.5e-1{per_second}+alpha_12)*P_LC2+alpha_11*P_LC3+beta_12*P_LC1+1e-4{per_second}*P_UC2;
    ode(P_LC1, time) = -(beta_12+alpha_13+9.5e-1{per_second})*P_LC1+alpha_12*P_LC2+beta_13*P_LO+1e-4{per_second}*P_UC1;
    ode(P_LO, time) = -(9.5e-1{per_second}+beta_13)*P_LO+1e-4{per_second}*P_UO+alpha_13*P_LC1;
    ode(P_UIF, time) = -(beta_2+alpha_3+alpha_4+beta_12)*P_UIF+beta_3*P_UC1+beta_4*P_UIM1+alpha_2*P_UO+alpha_12*P_UIC2;
    ode(P_UIC3, time) = -(alpha_3+alpha_11)*P_UIC3+beta_3*P_UC3+beta_11*P_UIC2;
    ode(P_UIC2, time) = -(alpha_3+alpha_12+beta_11)*P_UIC2+beta_3*P_UC2+beta_12*P_UIF+alpha_11*P_UIC3;
    ode(P_UIM1, time) = -(alpha_5+beta_4)*P_UIM1+beta_5*P_UIM2+alpha_4*P_UIF;
    ode(P_UIM2, time) = alpha_5*P_UIM1-beta_5*P_UIM2;
    ode(P_UC3, time) = -(beta_3+alpha_11+1e-4{per_second})*P_UC3+alpha_3*P_UIC3+beta_11*P_UC2+9.5e-1{per_second}*P_LC3;
    ode(P_UC2, time) = -(beta_11+beta_3+alpha_12+1e-4{per_second})*P_UC2+alpha_11*P_UC3+beta_12*P_UC1+alpha_3*P_UIC2+9.5e-1{per_second}*P_LC2;
    ode(P_UC1, time) = -(beta_12+alpha_13+beta_3+1e-4{per_second})*P_UC1+alpha_12*P_UC2+beta_13*P_UO+alpha_3*P_UIF+9.5e-1{per_second}*P_LC1;
    ode(P_UO, time) = -(alpha_2+beta_13+1e-4{per_second})*P_UO+beta_2*P_UIF+alpha_13*P_UC1+9.5e-1{per_second}*P_LO;
    alpha_11 = 3802{per_second}/(0.1027{dimensionless}*exp(-V/17{millivolt})+0.2{dimensionless}*exp(-V/150{millivolt}));
    alpha_12 = 3802{per_second}/(0.1027{dimensionless}*exp(-V/15{millivolt})+0.23{dimensionless}*exp(-V/150{millivolt}));
    alpha_13 = 3802{per_second}/(0.1027{dimensionless}*exp(-V/12{millivolt})+0.25{dimensionless}*exp(-V/150{millivolt}));
    beta_11 = 191.7{per_second}*exp(-V/20.3{millivolt});
    beta_12 = 200{per_second}*exp(-(V-5{millivolt})/20.3{millivolt});
    beta_13 = 220{per_second}*exp(-(V-10{millivolt})/20.3{millivolt});
    alpha_2 = 9178{per_second}*exp(V/29.68{millivolt});
    beta_2 = alpha_13*alpha_2*alpha_3/(beta_13*beta_3);
    alpha_3 = 3.7933e-4{per_second}*exp(-V/7.7{millivolt})/2.5{dimensionless};
    beta_3 = 8.4{per_second}+0.02{dimensionless}*V;
    alpha_4 = alpha_2/100{dimensionless};
    beta_4 = alpha_3;
    alpha_5 = alpha_2/3.5e4{dimensionless};
    beta_5 = alpha_3/20{dimensionless};
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: microA_per_microF {pub: out};
    var i_CaCa: microA_per_microF {pub: out};
    var i_CaK: microA_per_microF {pub: out};
    var i_CaNa: microA_per_microF {pub: out};
    var gamma_Nai: dimensionless {init: 0.75, pub: out};
    var gamma_Nao: dimensionless {init: 0.75, pub: out};
    var gamma_Ki: dimensionless {init: 0.75, pub: out};
    var gamma_Ko: dimensionless {init: 0.75, pub: out};
    var I_CaCa: microA_per_microF;
    var I_CaK: microA_per_microF;
    var I_CaNa: microA_per_microF;
    var P_Ca: cm_per_second {init: 0.00054};
    var P_Na: cm_per_second {init: 6.75e-7};
    var P_K: cm_per_second {init: 1.93e-7};
    var gamma_Cai: dimensionless {init: 1};
    var gamma_Cao: dimensionless {init: 0.341};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    I_CaCa = P_Ca*sqr(2{dimensionless})*V*sqr(F)/(R*T)*(gamma_Cai*Cai*exp(2{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_CaNa = P_Na*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_CaK = P_K*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_CaCa = d*f*f_Ca*I_CaCa;
    i_CaNa = d*f*f_Ca*I_CaNa;
    i_CaK = d*f*f_Ca*I_CaK;
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 3.176e-6, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var d_infinity: dimensionless;
    var tau_d: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E0_d: millivolt;
    E0_d = V+10{millivolt};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-E0_d/6.24{millivolt}));
    tau_d = sel
      case abs(E0_d) < 1e-5{millivolt}:
        0.001{second}/(0.035{dimensionless}*6.24{dimensionless});
      otherwise:
        0.001{dimensionless}*d_infinity*(1{dimensionless}-exp(-E0_d/6.24{millivolt}))/(0.035{per_millivolt_second}*E0_d);
    endsel;
    alpha_d = d_infinity/tau_d;
    beta_d = (1{dimensionless}-d_infinity)/tau_d;
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 0.99977, pub: out};
    var alpha_f: per_second;
    var beta_f: per_second;
    var f_infinity: dimensionless;
    var tau_f: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+32{millivolt})/8{millivolt}))+0.6{dimensionless}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_f = 0.001{second}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_millivolt}*(V+10{millivolt})))+0.02{dimensionless});
    alpha_f = f_infinity/tau_f;
    beta_f = (1{dimensionless}-f_infinity)/tau_f;
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: millimolar {init: 0.0006};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Cai: millimolar {pub: in};
    f_Ca = 1{dimensionless}/(1{dimensionless}+Cai/Km_Ca);
  enddef;

  def comp T_type_Ca_channel as
    var i_Ca_T: microA_per_microF {pub: out};
    var g_CaT: milliS_per_microF {init: 0.05};
    var E_Ca: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var b: dimensionless {priv: in};
    var g: dimensionless {priv: in};
    i_Ca_T = g_CaT*b*b*g*(V-E_Ca);
  enddef;

  def comp T_type_Ca_channel_b_gate as
    var b: dimensionless {init: 0.00096, pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var b_inf: dimensionless;
    var tau_b: second;
    b_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+14{millivolt})/10.8{millivolt}));
    tau_b = 0.0037{second}+0.0061{second}/(1{dimensionless}+exp((V+25{millivolt})/4.5{millivolt}));
    ode(b, time) = (b_inf-b)/tau_b;
  enddef;

  def comp T_type_Ca_channel_g_gate as
    var g: dimensionless {init: 0.9944, pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var g_inf: dimensionless;
    var tau_g: second;
    g_inf = 1{dimensionless}/(1{dimensionless}+exp((V+60{millivolt})/5.6{millivolt}));
    tau_g = sel
      case V <= 0{millivolt}:
        -0.000875{second}*V+0.012{second};
      otherwise:
        0.012{second};
    endsel;
    ode(g, time) = (g_inf-g)/tau_g;
  enddef;

  def comp rapid_delayed_rectifier_potassium_current as
    var i_Kr: microA_per_microF {pub: out};
    var g_Kr: milliS_per_microF;
    var E_Kr: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {priv: out, pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var P_O: dimensionless {priv: in};
    i_Kr = g_Kr*P_O*(V-E_Kr);
    g_Kr = 0.0135{milliS_per_microF}*pow(Ko, 0.59{dimensionless});
    E_Kr = R*T/F*ln(Ko/Ki);
  enddef;

  def comp Kr_channel_states as
    var P_O: dimensionless {init: 1.064e-10, pub: out};
    var P_C1: dimensionless {init: 3.341e-8};
    var P_C2: dimensionless {init: 1.6567e-8};
    var P_C3: dimensionless {init: 4.95e-6};
    var P_I: dimensionless {init: 3.2457e-11};
    var alpha: per_second;
    var beta: per_second;
    var alpha_in: per_second {init: 2172};
    var beta_in: per_second {init: 1077};
    var alpha_alpha: per_second;
    var beta_beta: per_second;
    var alpha_i: per_second;
    var beta_i: per_second;
    var mu: per_second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    ode(P_C3, time) = beta*P_C2-alpha*P_C3;
    ode(P_C2, time) = -(beta+alpha_in)*P_C2+alpha*P_C3+beta_in*P_C1;
    ode(P_C1, time) = -(beta_in+alpha_alpha+alpha_alpha)*P_C1+alpha_in*P_C2+beta_beta*P_O+mu*P_I;
    ode(P_O, time) = -(beta_beta+beta_i)*P_O+alpha_alpha*P_C1+alpha_i*P_I;
    ode(P_I, time) = -(mu+alpha_i)*P_I+alpha_alpha*P_C1+beta_i*P_O;
    alpha = 55.5{per_second}*exp(0.05547153{dimensionless}*(V-12{millivolt}));
    beta = 2.357{per_second}*exp(-0.036588{dimensionless}*V);
    alpha_alpha = 65.5{per_second}*exp(0.05547153{dimensionless}*(V-36{millivolt}));
    beta_beta = 2.9357{per_second}*exp(-0.02158{dimensionless}*V);
    alpha_i = 439{per_second}*exp(-0.02352{dimensionless}*(V+25{millivolt}))*4.5{millimolar}/Ko;
    beta_i = 656{per_second}*exp(0.000942{dimensionless}*V)*pow(4.5{millimolar}, 0.3{dimensionless})/pow(Ko, 0.3{dimensionless});
    mu = alpha_i*beta_beta*alpha_alpha/(alpha_alpha*beta_i);
  enddef;

  def comp slow_delayed_rectifier_potassium_current as
    var i_Ks: microA_per_microF {pub: out};
    var g_Ks: milliS_per_microF;
    var E_Ks: millivolt;
    var PNaK: dimensionless {init: 0.01833};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var xs1: dimensionless {priv: in};
    var xs2: dimensionless {priv: in};
    E_Ks = R*T/F*ln((Ko+PNaK*Nao)/(Ki+PNaK*Nai));
    g_Ks = 0.866{dimensionless}*0.433{milliS_per_cm2}*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/Cai, 1.4{dimensionless})));
    i_Ks = g_Ks*xs1*xs2*(V-E_Ks);
  enddef;

  def comp slow_delayed_rectifier_potassium_current_xs1_gate as
    var xs1: dimensionless {init: 0.004412, pub: out};
    var xs1_infinity: dimensionless;
    var tau_xs1: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    xs1_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{millivolt})/16.7{millivolt}));
    tau_xs1 = 0.001{second}/(7.19e-5{dimensionless}*(V+30{millivolt})/(1{dimensionless}-exp(-0.148{dimensionless}*(V+30{millivolt})))+0.000131{dimensionless}*(V+30{millivolt})/(exp(0.0687{dimensionless}*(V+30{millivolt}))-1{dimensionless}));
    ode(xs1, time) = (xs1_infinity-xs1)/tau_xs1;
  enddef;

  def comp slow_delayed_rectifier_potassium_current_xs2_gate as
    var xs2: dimensionless {init: 0.004413, pub: out};
    var xs2_infinity: dimensionless;
    var tau_xs2: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    xs2_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{millivolt})/16.7{millivolt}));
    tau_xs2 = 4{dimensionless}*0.001{second}/(7.19e-5{dimensionless}*(V+30{millivolt})/(1{dimensionless}-exp(-0.148{dimensionless}*(V+30{millivolt})))+0.000131{dimensionless}*(V+30{millivolt})/(exp(0.0687{dimensionless}*(V+30{millivolt}))-1{dimensionless}));
    ode(xs2, time) = (xs2_infinity-xs2)/tau_xs2;
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: microA_per_microF {pub: out};
    var E_K: millivolt {priv: out, pub: out};
    var g_K1: milliS_per_cm2;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = 0.75{milliS_per_microF}*sqrt(Ko/5.4{millimolar});
    E_K = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_second;
    var beta_K1: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E_K: millivolt {pub: in};
    alpha_K1 = 1020{per_second}/(1{dimensionless}+exp(0.2385{per_millivolt}*(V-E_K-59.215{millivolt})));
    beta_K1 = 1000{dimensionless}*(0.49124{per_second}*exp(0.08032{dimensionless}*(V-E_K+5.476{millivolt}))+exp(0.06175{dimensionless}*(V-E_K-594.31{millivolt})))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(V-E_K+4.753{millivolt})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: microA_per_microF {pub: out};
    var g_Kp: milliS_per_microF {init: 0.00552};
    var Kp: dimensionless;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
    i_Kp = g_Kp*Kp*(V-E_K);
  enddef;

  def comp sodium_activated_potassium_current as
    var i_K_Na: microA_per_microF {pub: out};
    var g_K_Na: milliS_per_microF;
    var nKNa: dimensionless {init: 2.8};
    var pona: dimensionless;
    var pov: dimensionless;
    var kdKNa: millimolar {init: 66};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    g_K_Na = 0{dimensionless}*0.12848{milliS_per_microF};
    pona = 0.85{dimensionless}/(1{dimensionless}+pow(kdKNa/Nai, nKNa));
    pov = 0.8{dimensionless}-0.65{dimensionless}/(1{dimensionless}+exp((V+125{millivolt})/15{millivolt}));
    i_K_Na = g_K_Na*pona*pov*(V-E_K);
  enddef;

  def comp ATP_sensitive_potassium_current as
    var i_K_ATP: microA_per_microF {pub: out};
    var g_K_ATP: milliS_per_microF;
    var i_K_ATP_on: dimensionless {init: 1};
    var nATP: dimensionless {init: 0.24};
    var nicholsarea: dimensionless {init: 5e-5};
    var ATPi: millimolar {init: 3};
    var hATP: dimensionless {init: 2};
    var kATP: millimolar {init: 0.00025};
    var pATP: dimensionless;
    var GKbaraATP: milliS_per_microF;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    g_K_ATP = i_K_ATP_on*0.000193{milliS_per_microF}/nicholsarea;
    pATP = 1{dimensionless}/(1{dimensionless}+pow(ATPi/kATP, hATP));
    GKbaraATP = g_K_ATP*pATP*pow(Ko/4{dimensionless}, nATP);
    i_K_ATP = GKbaraATP*(V-E_K);
  enddef;

  def comp transient_outward_current as
    var i_to: microA_per_microF {pub: out};
    var g_to: milliS_per_microF;
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: second {priv: out, pub: in};
    var rvdv: dimensionless;
    var zdv: dimensionless {priv: in};
    var ydv: dimensionless {priv: in};
    g_to = 0.5{milliS_per_microF};
    rvdv = exp(V/100{millivolt});
    i_to = g_to*pow(zdv, 3{dimensionless})*ydv*rvdv*(V-E_K);
  enddef;

  def comp transient_outward_current_zdv_gate as
    var zdv: dimensionless {init: 0.01152, pub: out};
    var alpha_zdv: per_second;
    var beta_zdv: per_second;
    var tau_zdv: second;
    var zdv_ss: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_zdv = 10000{per_second}*exp((V-40{millivolt})/25{millivolt})/(1{dimensionless}+exp((V-40{millivolt})/25{millivolt}));
    beta_zdv = 10000{per_second}*exp(-(V+90{millivolt})/25{millivolt})/(1{dimensionless}+exp(-(V+90{millivolt})/25{millivolt}));
    tau_zdv = 1{dimensionless}/(alpha_zdv+beta_zdv);
    zdv_ss = alpha_zdv/(alpha_zdv+beta_zdv);
    ode(zdv, time) = (zdv_ss-zdv)/tau_zdv;
  enddef;

  def comp transient_outward_current_ydv_gate as
    var ydv: dimensionless {init: 0.99998, pub: out};
    var alpha_ydv: per_second;
    var beta_ydv: per_second;
    var tau_ydv: second;
    var ydv_ss: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_ydv = 15{per_second}/(1{dimensionless}+exp((V+60{millivolt})/5{millivolt}));
    beta_ydv = 100{per_second}*exp((V+25{millivolt})/5{millivolt})/(1{dimensionless}+exp((V+25{millivolt})/5{millivolt}));
    tau_ydv = 1{dimensionless}/(alpha_ydv+beta_ydv);
    ydv_ss = alpha_ydv/(alpha_ydv+beta_ydv);
    ode(ydv, time) = (ydv_ss-ydv)/tau_ydv;
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: microA_per_microF {pub: out};
    var K_mpCa: millimolar {init: 0.0005};
    var I_pCa: microA_per_microF {init: 1.15};
    var time: second {pub: in};
    var Cai: millimolar {pub: in};
    i_p_Ca = I_pCa*Cai/(K_mpCa+Cai);
  enddef;

  def comp sodium_background_current as
    var i_Na_b: microA_per_microF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.004};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: microA_per_microF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.003016};
    var E_Ca: millivolt {pub: out};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: microA_per_microF {pub: out};
    var I_NaK: microA_per_microF {init: 2.25};
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67.3{dimensionless})-1{dimensionless});
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK = I_NaK*f_NaK*1{dimensionless}/(1{dimensionless}+sqr(K_mNai/Nai))*Ko/(Ko+K_mKo);
  enddef;

  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: microA_per_microF {pub: out};
    var i_ns_Na: microA_per_microF {pub: out};
    var i_ns_K: microA_per_microF {pub: out};
    var P_ns_Ca: cm_per_second;
    var gamma_Nai: dimensionless {pub: in};
    var gamma_Nao: dimensionless {pub: in};
    var gamma_Ki: dimensionless {pub: in};
    var gamma_Ko: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var I_ns_Na: microA_per_microF;
    var I_ns_K: microA_per_microF;
    var K_m_ns_Ca: millimolar {init: 0.0012};
    var time: second {pub: in};
    var Cai: millimolar {pub: in};
    var V: millivolt {pub: in};
    P_ns_Ca = 0{dimensionless}*1.75e-7{cm_per_second};
    I_ns_Na = P_ns_Ca*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    I_ns_K = P_ns_Ca*sqr(1{dimensionless})*V*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_ns_Na = I_ns_Na*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_K = I_ns_K*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_Ca = i_ns_Na+i_ns_K;
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: microA_per_microF {pub: out};
    var c1: microA_per_microF {init: 0.00025};
    var c2: millimolar {init: 0.0001};
    var gamma: dimensionless {init: 0.15};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    i_NaCa = c1*exp((gamma-1{dimensionless})*V*F/(R*T))*(exp(V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-pow(Nao, 3{dimensionless})*Cai)/(1{dimensionless}+c2*exp((gamma-1{dimensionless})*V*F/(R*T))*(exp(V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao+pow(Nao, 3{dimensionless})*Cai));
  enddef;

  def comp calcium_dynamics as
    var i_rel: millimolar_per_second {pub: out};
    var i_up: millimolar_per_second {pub: out};
    var i_leak: millimolar_per_second {pub: out};
    var i_tr: millimolar_per_second {pub: out};
    var G_rel: per_second;
    var G_rel_max: per_second {init: 60000};
    var G_rel_overload: per_second {init: 4000};
    var tau_tr: second {init: 0.18};
    var K_mrel: millimolar {init: 0.0008};
    var delta_Ca_ith: millimolar {init: 0.00018};
    var CSQN_max: millimolar {init: 10};
    var K_mCSQN: millimolar {init: 0.8};
    var K_mup: millimolar {init: 0.00092};
    var K_leak: per_second;
    var I_up: millimolar_per_second {init: 8.75};
    var Ca_NSR_max: millimolar {init: 15};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: millimolar {init: 0.000114, pub: out};
    var Cao: millimolar {init: 1.8, pub: out};
    var Ca_JSR: millimolar {init: 1.643, pub: out};
    var Ca_NSR: millimolar {init: 1.645, pub: out};
    var V_myo: micro_litre {pub: in};
    var A_cap: mm2 {pub: in};
    var V_JSR: micro_litre;
    var V_NSR: micro_litre;
    var i_NaCa: microA_per_microF {pub: in};
    var i_CaCa: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Ca_T: microA_per_microF {pub: in};
    var K_mTn: millimolar {init: 0.0005};
    var K_mCMDN: millimolar {init: 0.00238};
    var Tn_max: millimolar {init: 0.07};
    var CMDN_max: millimolar {init: 0.05};
    var dVdt: dimensionless {pub: in};
    var APtrack: dimensionless {init: 0};
    var APtrack2: dimensionless {init: 0};
    var APtrack3: dimensionless {init: 0};
    var Cainfluxtrack: dimensionless {init: 0};
    var OVRLDtrack: dimensionless {init: 0};
    var OVRLDtrack2: dimensionless {init: 0};
    var OVRLDtrack3: dimensionless {init: 0};
    var CSQNthresh: millimolar {init: 0.7};
    var Logicthresh: dimensionless {init: 0.98};
    V_JSR = 0.0048{dimensionless}/0.68{dimensionless}*V_myo;
    V_NSR = 0.0552{dimensionless}/0.68{dimensionless}*V_myo;
    ode(APtrack, time) = sel
      case dVdt > 150000{dimensionless}:
        100000{dimensionless}*(1{dimensionless}-APtrack)-500{dimensionless}*APtrack;
      otherwise:
        -500{dimensionless}*APtrack;
    endsel;
    ode(APtrack2, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100000{dimensionless}*(1{dimensionless}-APtrack2)-500{dimensionless}*APtrack2;
      otherwise:
        -500{dimensionless}*APtrack2;
    endsel;
    ode(APtrack3, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100000{dimensionless}*(1{dimensionless}-APtrack3)-500{dimensionless}*APtrack3;
      otherwise:
        -10{dimensionless}*APtrack3;
    endsel;
    ode(Cainfluxtrack, time) = sel
      case APtrack > 0.2{dimensionless}:
        -A_cap*(i_CaCa+i_Ca_T-i_NaCa+i_p_Ca+i_Ca_b)/(2{dimensionless}*V_myo*F);
      case (APtrack2 > 0.01{dimensionless}) and (APtrack <= 0.2{dimensionless}):
        0{dimensionless};
      otherwise:
        -500{dimensionless}*Cainfluxtrack;
    endsel;
    ode(OVRLDtrack, time) = sel
      case (1{dimensionless}/(1{dimensionless}+K_mCSQN/Ca_NSR) > CSQNthresh) and (OVRLDtrack3 < 0.37{dimensionless}) and (APtrack3 < 0.37{dimensionless}):
        50000{dimensionless}*(1{dimensionless}-OVRLDtrack);
      otherwise:
        -500{dimensionless}*OVRLDtrack;
    endsel;
    ode(OVRLDtrack2, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack2 < Logicthresh):
        50000{dimensionless}*(1{dimensionless}-OVRLDtrack2);
      otherwise:
        -500{dimensionless}*OVRLDtrack2;
    endsel;
    ode(OVRLDtrack3, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack3 < Logicthresh):
        50000{dimensionless}*(1{dimensionless}-OVRLDtrack3);
      otherwise:
        -10{dimensionless}*OVRLDtrack3;
    endsel;
    G_rel = sel
      case Cainfluxtrack > delta_Ca_ith:
        G_rel_max*(Cainfluxtrack-delta_Ca_ith)/(K_mrel+Cainfluxtrack-delta_Ca_ith)*(1{dimensionless}-APtrack2)*APtrack2;
      case (Cainfluxtrack <= delta_Ca_ith) and (OVRLDtrack2 > 0{dimensionless}):
        G_rel_overload*(1{dimensionless}-OVRLDtrack2)*OVRLDtrack2;
      otherwise:
        0{dimensionless};
    endsel;
    i_rel = G_rel*(Ca_JSR-Cai);
    i_up = I_up*Cai/(Cai+K_mup);
    K_leak = I_up/Ca_NSR_max;
    i_leak = K_leak*Ca_NSR;
    i_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    ode(Ca_JSR, time) = 1{dimensionless}/(1{dimensionless}+CSQN_max*K_mCSQN/sqr(K_mCSQN+Ca_JSR))*(i_tr-i_rel);
    ode(Ca_NSR, time) = -i_tr*V_JSR/V_NSR-i_leak+i_up;
    ode(Cai, time) = 1{dimensionless}/(1{dimensionless}+CMDN_max*K_mCMDN/sqr(K_mCMDN+Cai)+Tn_max*K_mTn/sqr(K_mTn+Cai))*(-A_cap*(i_CaCa+i_Ca_T-2{dimensionless}*i_NaCa+i_p_Ca+i_Ca_b)/(2{dimensionless}*V_myo*F)+i_rel*V_JSR/V_myo+(i_leak-i_up)*V_NSR/V_myo);
  enddef;

  def comp ionic_concentrations as
    var Nai: millimolar {init: 11.54, pub: out};
    var Nao: millimolar {init: 132, pub: out};
    var Ki: millimolar {init: 140.28, pub: out};
    var Ko: millimolar {init: 4.5, pub: out};
    var A_cap: mm2 {init: 1.434e-7, pub: out};
    var preplength: mm {init: 0.001};
    var radius: mm {init: 1.1e-4};
    var volume: micro_litre;
    var V_myo: micro_litre {pub: out};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_CaNa: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_ns_Na: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_CaK: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_K_Na: microA_per_microF {pub: in};
    var i_K_ATP: microA_per_microF {pub: in};
    var i_ns_K: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    volume = pi*preplength*sqr(radius);
    V_myo = 0.68{dimensionless}*volume;
    ode(Nai, time) = -(i_Na+i_CaNa+i_Na_b+i_ns_Na+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless})*A_cap/(V_myo*F);
    ode(Ki, time) = -(i_CaK+i_Kr+i_Ks+i_K1+i_Kp+i_K_Na+i_K_ATP+i_to+i_ns_K+(-i_NaK*2{dimensionless}))*A_cap/(V_myo*F);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp Na_channel_states;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f_Ca_gate;
      endcomp;
      comp T_type_Ca_channel incl
        comp T_type_Ca_channel_b_gate;
        comp T_type_Ca_channel_g_gate;
      endcomp;
      comp rapid_delayed_rectifier_potassium_current incl
        comp Kr_channel_states;
      endcomp;
      comp slow_delayed_rectifier_potassium_current incl
        comp slow_delayed_rectifier_potassium_current_xs1_gate;
        comp slow_delayed_rectifier_potassium_current_xs2_gate;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp transient_outward_current incl
        comp transient_outward_current_zdv_gate;
        comp transient_outward_current_ydv_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp plateau_potassium_current;
      comp sodium_activated_potassium_current;
      comp ATP_sensitive_potassium_current;
      comp sarcolemmal_calcium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp non_specific_calcium_activated_current;
      comp ionic_concentrations;
      comp calcium_dynamics;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp Na_channel_states;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_b_gate;
      comp T_type_Ca_channel_g_gate;
    endcomp;
    comp rapid_delayed_rectifier_potassium_current incl
      comp Kr_channel_states;
    endcomp;
    comp slow_delayed_rectifier_potassium_current incl
      comp slow_delayed_rectifier_potassium_current_xs1_gate;
      comp slow_delayed_rectifier_potassium_current_xs2_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_zdv_gate;
      comp transient_outward_current_ydv_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_activated_potassium_current and environment for
    vars time and time;
  enddef;
  def map between ATP_sensitive_potassium_current and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between membrane and rapid_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and slow_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_activated_potassium_current for
    vars V and V;
    vars i_K_Na and i_K_Na;
  enddef;
  def map between membrane and ATP_sensitive_potassium_current for
    vars V and V;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_ns_Ca and i_ns_Ca;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between membrane and calcium_dynamics for
    vars F and F;
    vars dVdt and dVdt;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_CaNa and i_CaNa;
    vars i_CaK and i_CaK;
  enddef;
  def map between L_type_Ca_channel and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_CaCa and i_CaCa;
  enddef;
  def map between T_type_Ca_channel and calcium_dynamics for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_Ks and i_Ks;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and calcium_dynamics for
    vars Cai and Cai;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_Kr and i_Kr;
  enddef;
  def map between transient_outward_current and ionic_concentrations for
    vars i_to and i_to;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_activated_potassium_current and ionic_concentrations for
    vars Nai and Nai;
    vars i_K_Na and i_K_Na;
  enddef;
  def map between ATP_sensitive_potassium_current and ionic_concentrations for
    vars Ko and Ko;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between sodium_activated_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between ATP_sensitive_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between transient_outward_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and calcium_dynamics for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between T_type_Ca_channel and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
  enddef;
  def map between non_specific_calcium_activated_current and calcium_dynamics for
    vars Cai and Cai;
    vars Cao and Cao;
  enddef;
  def map between L_type_Ca_channel and non_specific_calcium_activated_current for
    vars gamma_Nao and gamma_Nao;
    vars gamma_Nai and gamma_Nai;
    vars gamma_Ko and gamma_Ko;
    vars gamma_Ki and gamma_Ki;
  enddef;
  def map between fast_sodium_current and Na_channel_states for
    vars P_O_Na and P_O_Na;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_b_gate for
    vars b and b;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_g_gate for
    vars g and g;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and Kr_channel_states for
    vars P_O and P_O;
    vars time and time;
    vars V and V;
    vars Ko and Ko;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs1_gate for
    vars xs1 and xs1;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs2_gate for
    vars xs2 and xs2;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K and E_K;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_ydv_gate for
    vars ydv and ydv;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_zdv_gate for
    vars zdv and zdv;
    vars time and time;
    vars V and V;
  enddef;
  def map between calcium_dynamics and ionic_concentrations for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
  enddef;
enddef;
