<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 20/04/2010 at 2:35:32 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="lenbury_2001" cmeta:id="lenbury_2001" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Modeling insulin kinetics: responses to a single oral glucose administration or ambulatory-fed conditions</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
           Please note that this particular variant of the model is the basic core model which includes three main variables: plasma insulin concentration (x), glucose concentration (y), and the density of the pancreatic beta cells (z) - calculated by equations 11-13. Parameter values have been taken from the legend of figure 2. The model runs in COR and OpenCell and the units are consistent throughout, however the CellML model does not recreate the published results for x (it does for y in figure 2).
		   </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: This paper presents a nonlinear mathematical model of the glucose-insulin feedback system, which has been extended to incorporate the beta-cells' function on maintaining and regulating plasma insulin level in man. Initially, a gastrointestinal absorption term for glucose is utilized to effect the glucose absorption by the intestine and the subsequent release of glucose into the bloodstream, taking place at a given initial rate and falling off exponentially with time. An analysis of the model is carried out by the singular perturbation technique in order to derive boundary conditions on the system parameters which identify, in particular, the existence of limit cycles in our model system consistent with the oscillatory patterns often observed in clinical data. We then utilize a sinusoidal term to incorporate the temporal absorption of glucose in order to study the responses in the patients under ambulatory-fed conditions. A numerical investigation is carried out in this case to construct a bifurcation diagram to identify the ranges of parametric values for which chaotic behavior can be expected, leading to interesting biological interpretations.
</para>
				<para>
					<informalfigure float="0" id="fig_reaction_diagram">
						<mediaobject>
							<imageobject>
								<objectinfo>
									<title>model diagram</title>
								</objectinfo>
								<imagedata fileref="lenbury_2001a.png"/>
							</imageobject>
						</mediaobject>
						<caption>Schematic diagram of the pancreatic beta-cells.  Glucose is taken up and produced in response to insulin secretion and clearance.  Beta-cell formation and loss represent the rates at which beta-cells replicate and die.</caption>
					</informalfigure>
				</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Modeling insulin kinetics: responses to a single oral glucose administration or ambulatory-fed conditions. Yongwimon Lenbury, Sitipong Ruktamatakul, and Somkid Amornsamarnkul, 2001, <emphasis>Mathematical Biosciences</emphasis>, 59, 15-25.    <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/11226623">PubMed ID: 11226623</ulink>
				</para>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Bag rdf:about="rdf:#82ed34fd-8b77-4472-bd7f-67b5e15fadb2">
			<rdf:li>endocrine</rdf:li>
			<rdf:li>beta cell</rdf:li>
			<rdf:li>insulin</rdf:li>
			<rdf:li>pancreas</rdf:li>
		</rdf:Bag>
		<rdf:Seq rdf:about="rdf:#08530b50-a2c5-4d7b-a763-cf27ef2da63d">
			<rdf:li rdf:resource="rdf:#f526d346-fb5a-46c3-855e-383227f54203"/>
			<rdf:li rdf:resource="rdf:#740d40a8-d4a7-4ae0-952e-9855bd02f723"/>
			<rdf:li rdf:resource="rdf:#d34e1bd0-1626-477c-880b-3c71ed2cd807"/>
		</rdf:Seq>
		<rdf:Description rdf:about="">
		    <dc:title>Modeling insulin kinetics: responses to a single oral glucose administration or ambulatory-fed conditions (Basic Model)</dc:title>
			<dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#2b7202ed-91eb-4e83-9746-1798c5d07337"/>
			<dcterms:created rdf:resource="rdf:#538dd545-04d4-4770-a2e7-f8b8d9012563"/>
			<dc:creator rdf:resource="rdf:#9af5a991-26ce-45b0-8fd4-78c99af62827"/>
			<cmeta:modification xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#308c7ac7-b1c9-4616-870b-1ca26a50e38f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#2590dd26-8318-49ab-ac5e-d11d0d74ce10">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#740d40a8-d4a7-4ae0-952e-9855bd02f723">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#64f9f981-44fe-4a42-8244-293a01fd7f47"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#108f985c-ec1f-485f-b0ee-36c1a85fb6fc">
			<dc:creator rdf:resource="rdf:#08530b50-a2c5-4d7b-a763-cf27ef2da63d"/>
			<dc:title>Modeling insulin kinetics: responses to a single oral glucose administration or ambulatory-fed conditions</dc:title>
			<bqs:volume>59</bqs:volume>
			<bqs:first_page>15</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#96608990-f07c-46f8-9f39-50a8c205f213"/>
			<dcterms:issued rdf:resource="rdf:#28431c4e-a8e5-4ca4-b5c0-2fe28afa34af"/>
			<bqs:last_page>25</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f6649729-2654-4dd6-b4cf-077364afaa1d">
			<vCard:Given>Somkid</vCard:Given>
			<vCard:Family>Amornsamarnkul</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#28431c4e-a8e5-4ca4-b5c0-2fe28afa34af">
			<dcterms:W3CDTF>2001-00-00 00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f9453d70-81aa-48c7-ad47-181dd54cb9f1">
			<dc:creator rdf:resource="rdf:#3aeec9d9-c567-40ab-955a-3c0af3ae3626"/>
			<rdf:value>This is the CellML description of Lenbury et al.'s 2001 mathematical model of insulin kinetics.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a8338d58-ba45-4ed8-b630-9e8e2980b1dc">
			<vCard:N rdf:resource="rdf:#001c3f2b-48ce-45f8-9e0b-da511ac60b9e"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7b2b843b-f70a-4c86-ab96-b5247c02367e">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="#lenbury_2001">
			<dc:title>
        Lenbury et al.'s 2001 mathematical model of insulin kinetics.
      </dc:title>
			<cmeta:bio_entity xmlns:cmeta="http://www.cellml.org/metadata/1.0#">pancreatic beta cell</cmeta:bio_entity>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#f9453d70-81aa-48c7-ad47-181dd54cb9f1"/>
			<bqs:reference rdf:resource="rdf:#039df862-4049-4dd4-bf40-580c4e7f1a29"/>
			<bqs:reference rdf:resource="rdf:#34bb493d-c87d-423d-b2fc-a0d9b5fbcec9"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#039df862-4049-4dd4-bf40-580c4e7f1a29">
			<bqs:Pubmed_id>11226623</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#108f985c-ec1f-485f-b0ee-36c1a85fb6fc"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#578ea9ef-2951-4988-97e0-35b6d6a5bc8d">
			<dcterms:W3CDTF>2007-09-03T13:56:05+12:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f526d346-fb5a-46c3-855e-383227f54203">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#9514e30c-c130-4ba9-86f4-d2c02d18f638"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#edeab1d6-9125-4410-b274-e2dc5ecea537">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#9514e30c-c130-4ba9-86f4-d2c02d18f638">
			<vCard:Given>Yongwimon</vCard:Given>
			<vCard:Family>Lenbury</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#538dd545-04d4-4770-a2e7-f8b8d9012563">
			<dcterms:W3CDTF>2007-06-18T00:00:00+00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="#z">
			<dcterms:alternative>pancreatic beta cell density</dcterms:alternative>
			<dc:title>z</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#x">
			<dcterms:alternative>insulin</dcterms:alternative>
			<dc:title>x</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#y">
			<dcterms:alternative>glucose</dcterms:alternative>
			<dc:title>y</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#9af5a991-26ce-45b0-8fd4-78c99af62827">
			<vCard:ORG rdf:resource="rdf:#7b2b843b-f70a-4c86-ab96-b5247c02367e"/>
			<vCard:EMAIL rdf:resource="rdf:#35362bf9-16a9-4d0f-86f8-f09638f28327"/>
			<vCard:N rdf:resource="rdf:#2590dd26-8318-49ab-ac5e-d11d0d74ce10"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#96608990-f07c-46f8-9f39-50a8c205f213">
			<dc:title>BioSystems</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#35362bf9-16a9-4d0f-86f8-f09638f28327">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#308c7ac7-b1c9-4616-870b-1ca26a50e38f">
			<dcterms:modified rdf:resource="rdf:#578ea9ef-2951-4988-97e0-35b6d6a5bc8d"/>
			<rdf:value>I've added a piecewise equation for "z" such that it can never equal zero.  This now solves the NaN problem generated by having a zero as a denominator.</rdf:value>
			<cmeta:modifier xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#a8338d58-ba45-4ed8-b630-9e8e2980b1dc"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#001c3f2b-48ce-45f8-9e0b-da511ac60b9e">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#55539d48-6d75-4109-ba6e-f3ffa4b06250">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value rdf:resource="rdf:#82ed34fd-8b77-4472-bd7f-67b5e15fadb2"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#64f9f981-44fe-4a42-8244-293a01fd7f47">
			<vCard:Given>Sitipong</vCard:Given>
			<vCard:Family>Ruktamatakul</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#2b7202ed-91eb-4e83-9746-1798c5d07337">
			<dc:creator rdf:resource="rdf:#edeab1d6-9125-4410-b274-e2dc5ecea537"/>
			<rdf:value>Model now runs in PCEnv without generating NaNs - but I'm still not sure it can generate the published results!</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d34e1bd0-1626-477c-880b-3c71ed2cd807">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#f6649729-2654-4dd6-b4cf-077364afaa1d"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3aeec9d9-c567-40ab-955a-3c0af3ae3626">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#34bb493d-c87d-423d-b2fc-a0d9b5fbcec9">
			<dc:subject rdf:resource="rdf:#55539d48-6d75-4109-ba6e-f3ffa4b06250"/>
		</rdf:Description>
	</rdf:RDF>   
	
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="rate">
      <unit units="second" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="second" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="x">
      <variable name="x" units="dimensionless" initial_value="4.0" public_interface="out"/>
      <variable name="r_1" units="rate" initial_value="0.2"/>
      <variable name="r_2" units="rate" initial_value="0.1"/>
      <variable name="c_1" units="rate" initial_value="0.1"/>
      <variable name="z" units="dimensionless" public_interface="in"/>
      <variable name="y" units="dimensionless" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x</ci>
            </apply>
            <apply>
               <times/>
               <ci>z</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>r_1</ci>
                     <ci>y</ci>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>r_2</ci>
                     </apply>
                     <ci>x</ci>
                  </apply>
                  <ci>c_1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="y">
      <variable name="y" units="dimensionless" initial_value="0.0" public_interface="out"/>
      <variable name="r_3" units="rate" initial_value="0.1"/>
      <variable name="r_4" units="rate" initial_value="0.1"/>
      <variable name="c_2" units="rate" initial_value="0.1"/>
      <variable name="epsilon" units="dimensionless" public_interface="in"/>
      <variable name="z" units="dimensionless" public_interface="in"/>
      <variable name="x" units="dimensionless" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>y</ci>
            </apply>
            <apply>
               <times/>
               <ci>epsilon</ci>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <divide/>
                        <ci>r_3</ci>
                        <ci>z</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>r_4</ci>
                        <ci>x</ci>
                     </apply>
                  </apply>
                  <ci>c_2</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="z">
      <variable name="z" units="dimensionless" initial_value="1.0" public_interface="out"/>
      <variable name="r_5" units="rate" initial_value="0.1"/>
      <variable name="r_6" units="rate" initial_value="0.1"/>
      <variable name="r_7" units="rate" initial_value="0.05"/>
      <variable name="z_hat" units="dimensionless" initial_value="2.0"/>
      <variable name="y_hat" units="dimensionless" initial_value="1.24"/>
      <variable name="y" units="dimensionless" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>z</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>r_5</ci>
                     <apply>
                        <minus/>
                        <ci>y</ci>
                        <ci>y_hat</ci>
                     </apply>
                     <apply>
                        <minus/>
                        <ci>z_hat</ci>
                        <ci>z</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>r_6</ci>
                     <ci>z</ci>
                     <apply>
                        <minus/>
                        <ci>z_hat</ci>
                        <ci>z</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>r_7</ci>
                  <ci>z</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="model_constants">
      <variable name="epsilon" units="dimensionless" initial_value="0.1" public_interface="out"/>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="x" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="y" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="z" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="x" component_2="y"/>
      <map_variables variable_1="y" variable_2="y"/>
      <map_variables variable_1="x" variable_2="x"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="z" component_2="y"/>
      <map_variables variable_1="y" variable_2="y"/>
      <map_variables variable_1="z" variable_2="z"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="z" component_2="x"/>
      <map_variables variable_1="z" variable_2="z"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="y" component_2="model_constants"/>
      <map_variables variable_1="epsilon" variable_2="epsilon"/>
   </connection>
</model>
