<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 20/04/2010 at 2:52:11 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="lenbury_2001" cmeta:id="lenbury_2001" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Modeling insulin kinetics: responses to a single oral glucose administration or ambulatory-fed conditions</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
           Please note that this particular variant of the model is an extension of the basic core model.  To the three variables described in the core model: plasma insulin concentration (x), glucose concentration (y) and the density of the pancreatic beta cells (z), a fourth variable (u) is added which describes the temporal glucose absorption by the gastrointestinal tract (equations 30-34). Parameter values have been taken from the legend of figure 3. The model runs in COR and OpenCell and the units are consistent throughout, however the CellML model does not recreate the published results.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: This paper presents a nonlinear mathematical model of the glucose-insulin feedback system, which has been extended to incorporate the beta-cells' function on maintaining and regulating plasma insulin level in man. Initially, a gastrointestinal absorption term for glucose is utilized to effect the glucose absorption by the intestine and the subsequent release of glucose into the bloodstream, taking place at a given initial rate and falling off exponentially with time. An analysis of the model is carried out by the singular perturbation technique in order to derive boundary conditions on the system parameters which identify, in particular, the existence of limit cycles in our model system consistent with the oscillatory patterns often observed in clinical data. We then utilize a sinusoidal term to incorporate the temporal absorption of glucose in order to study the responses in the patients under ambulatory-fed conditions. A numerical investigation is carried out in this case to construct a bifurcation diagram to identify the ranges of parametric values for which chaotic behavior can be expected, leading to interesting biological interpretations.
</para>
				<para>
					<informalfigure float="0" id="fig_reaction_diagram">
						<mediaobject>
							<imageobject>
								<objectinfo>
									<title>model diagram</title>
								</objectinfo>
								<imagedata fileref="lenbury_2001b.png"/>
							</imageobject>
						</mediaobject>
						<caption>Schematic diagram of the pancreatic beta-cells.  Glucose production is by beta-cells and uptake is by gastrointestinal cells.  Beta-cell formation and loss represent the rates at which beta-cells replicate and die.</caption>
					</informalfigure>
				</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Modeling insulin kinetics: responses to a single oral glucose administration or ambulatory-fed conditions. Yongwimon Lenbury, Sitipong Ruktamatakul, and Somkid Amornsamarnkul, 2001, <emphasis>Mathematical Biosciences</emphasis>, 59, 15-25.    <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/11226623">PubMed ID: 11226623</ulink>
				</para>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Bag rdf:about="rdf:#29051065-d25f-4974-9138-2e9018ad6235">
			<rdf:li>insulin</rdf:li>
			<rdf:li>pancreas</rdf:li>
			<rdf:li>beta cell</rdf:li>
			<rdf:li>endocrine</rdf:li>
		</rdf:Bag>
		<rdf:Seq rdf:about="rdf:#e05e352a-27c4-44bb-9207-40a1be923b12">
			<rdf:li rdf:resource="rdf:#45722bf9-4578-496e-84ba-b8eaf19798f2"/>
			<rdf:li rdf:resource="rdf:#71b8c8ce-a48e-438b-96d3-aa9d7b5fde3d"/>
			<rdf:li rdf:resource="rdf:#37a9ab57-b89f-464d-9358-c9846454288c"/>
		</rdf:Seq>
		<rdf:Description rdf:about="rdf:#71064038-7879-46a4-8227-25a162bd2636">
			<dcterms:W3CDTF>2001-00-00 00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="">
		    <dc:title>Modeling insulin kinetics: responses to a single oral glucose administration or ambulatory-fed conditions (Extended Model)</dc:title>
			<dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#df11a84c-777e-499f-a55c-c846ea177803"/>
			<dcterms:created rdf:resource="rdf:#8cc7b3c9-4a20-4213-b857-8bccf77be7d0"/>
			<dc:creator rdf:resource="rdf:#80275eb1-de77-4814-88a5-ad0f9daf6a22"/>
			<cmeta:modification xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#e1d465b7-f397-4ace-9e32-7f4c7035e52b"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#5c7a47d7-b97e-4098-97b5-48b6ec52dc4f">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#6a5ed78e-e2f0-41ea-b2b0-56322fa5926f">
			<vCard:Given>Sitipong</vCard:Given>
			<vCard:Family>Ruktamatakul</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#80275eb1-de77-4814-88a5-ad0f9daf6a22">
			<vCard:ORG rdf:resource="rdf:#5c7a47d7-b97e-4098-97b5-48b6ec52dc4f"/>
			<vCard:EMAIL rdf:resource="rdf:#cf6071ad-89eb-4321-a13e-395c31b94772"/>
			<vCard:N rdf:resource="rdf:#cea521d5-5a8a-4cb3-9833-dfa2a903b973"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#71b8c8ce-a48e-438b-96d3-aa9d7b5fde3d">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#6a5ed78e-e2f0-41ea-b2b0-56322fa5926f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e1d465b7-f397-4ace-9e32-7f4c7035e52b">
			<dcterms:modified rdf:resource="rdf:#fad7737a-fc0d-4daa-ab48-f692f62d1701"/>
			<rdf:value>I've added a piecewise equation for "z" such that it can never equal zero.  This now solves the NaN problem generated by having a zero as a denominator.</rdf:value>
			<cmeta:modifier xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#47b290ae-d7eb-4edf-a5bd-ecac68529ae1"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#56993d05-7d3b-42b4-9750-688d64999338">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#fbbebf24-3113-4b27-8623-40cce29cb578">
			<dc:subject rdf:resource="rdf:#72d06171-1769-42f7-91e4-b2ce5a2b1428"/>
		</rdf:Description>
		<rdf:Description rdf:about="#lenbury_2001">
			<dc:title>
        Lenbury et al.'s 2001 mathematical model of insulin kinetics.
      </dc:title>
			<cmeta:bio_entity xmlns:cmeta="http://www.cellml.org/metadata/1.0#">pancreatic beta cell</cmeta:bio_entity>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#e10b1517-5c8c-402c-8175-c69a2dc79a8b"/>
			<bqs:reference rdf:resource="rdf:#e6f1488e-5953-4104-8375-7c28cf951d3c"/>
			<bqs:reference rdf:resource="rdf:#fbbebf24-3113-4b27-8623-40cce29cb578"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#df11a84c-777e-499f-a55c-c846ea177803">
			<dc:creator rdf:resource="rdf:#56993d05-7d3b-42b4-9750-688d64999338"/>
			<rdf:value>The model now runs in PCEnv without producing "NaNs" but I'm still not sure it can recreate the published results.

Also, please note that this particular variant of the model is an extension of the basic core model.  To the three variables described in the core model: plasma insulin concentration (x), glucose concentration (y) and the density of the pancreatic beta cells (z), we are adding a forth variable (u) which describes the temporal glucose absorption by the gastrointestinal tract.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#47b290ae-d7eb-4edf-a5bd-ecac68529ae1">
			<vCard:N rdf:resource="rdf:#709a6c73-d625-4771-8113-cbf277c400e5"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#70981e92-e11c-4b95-bef6-151f6e2829df">
			<vCard:Given>Yongwimon</vCard:Given>
			<vCard:Family>Lenbury</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#99774d70-bfcb-41be-b991-7650cb32922b">
			<dc:title>BioSystems</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#fad7737a-fc0d-4daa-ab48-f692f62d1701">
			<dcterms:W3CDTF>2007-09-03T13:59:03+12:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="#u">
			<dcterms:alternative>glucose absorption</dcterms:alternative>
			<dc:title>u</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#z">
			<dcterms:alternative>pancreatic beta cell density</dcterms:alternative>
			<dc:title>z</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e3c3fb16-e286-46b5-b5ce-3a2ebe717fb6">
			<dc:creator rdf:resource="rdf:#e05e352a-27c4-44bb-9207-40a1be923b12"/>
			<dc:title>Modeling insulin kinetics: responses to a single oral glucose administration or ambulatory-fed conditions</dc:title>
			<bqs:volume>59</bqs:volume>
			<bqs:first_page>15</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#99774d70-bfcb-41be-b991-7650cb32922b"/>
			<dcterms:issued rdf:resource="rdf:#71064038-7879-46a4-8227-25a162bd2636"/>
			<bqs:last_page>25</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="#x">
			<dcterms:alternative>insulin</dcterms:alternative>
			<dc:title>x</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="#y">
			<dcterms:alternative>glucose</dcterms:alternative>
			<dc:title>y</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e10b1517-5c8c-402c-8175-c69a2dc79a8b">
			<dc:creator rdf:resource="rdf:#97a26cfb-bc6e-4839-8030-c0fc1f0973e3"/>
			<rdf:value>This is the CellML description of Lenbury et al.'s 2001 mathematical model of insulin kinetics.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e6f1488e-5953-4104-8375-7c28cf951d3c">
			<bqs:Pubmed_id>11226623</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#e3c3fb16-e286-46b5-b5ce-3a2ebe717fb6"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#cea521d5-5a8a-4cb3-9833-dfa2a903b973">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#97a26cfb-bc6e-4839-8030-c0fc1f0973e3">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#cf6071ad-89eb-4321-a13e-395c31b94772">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e06cfcaf-bb4d-41f2-972e-12005183dfea">
			<vCard:Given>Somkid</vCard:Given>
			<vCard:Family>Amornsamarnkul</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#72d06171-1769-42f7-91e4-b2ce5a2b1428">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value rdf:resource="rdf:#29051065-d25f-4974-9138-2e9018ad6235"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#37a9ab57-b89f-464d-9358-c9846454288c">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#e06cfcaf-bb4d-41f2-972e-12005183dfea"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#709a6c73-d625-4771-8113-cbf277c400e5">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#45722bf9-4578-496e-84ba-b8eaf19798f2">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#70981e92-e11c-4b95-bef6-151f6e2829df"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#8cc7b3c9-4a20-4213-b857-8bccf77be7d0">
			<dcterms:W3CDTF>2007-06-18T00:00:00+00:00</dcterms:W3CDTF>
		</rdf:Description>
	</rdf:RDF>   <units xmlns="http://www.cellml.org/cellml/1.0#" name="rate">
      <unit units="second" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="second" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="x">
      <variable name="x" units="dimensionless" initial_value="5" public_interface="out"/>
      <variable name="r1" units="rate" initial_value="0.15"/>
      <variable name="r2" units="rate" initial_value="0.12"/>
      <variable name="c1" units="rate" initial_value="0.1"/>
      <variable name="z" units="dimensionless" public_interface="in"/>
      <variable name="y" units="dimensionless" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x</ci>
            </apply>
            <apply>
               <times/>
               <ci>z</ci>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>r1</ci>
                     <ci>y</ci>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>r2</ci>
                     </apply>
                     <ci>x</ci>
                  </apply>
                  <ci>c1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="y">
      <variable name="y" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="r3" units="rate" initial_value="0.05"/>
      <variable name="r4" units="rate" initial_value="0.03"/>
      <variable name="c2" units="rate" initial_value="0.1"/>
      <variable name="c3" units="rate" initial_value="0.005"/>
      <variable name="epsilon" units="dimensionless" public_interface="in"/>
      <variable name="u" units="dimensionless" public_interface="in"/>
      <variable name="z" units="dimensionless" public_interface="in"/>
      <variable name="x" units="dimensionless" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>y</ci>
            </apply>
            <apply>
               <times/>
               <ci>epsilon</ci>
               <apply>
                  <plus/>
                  <apply>
                     <divide/>
                     <ci>r3</ci>
                     <ci>z</ci>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>r4</ci>
                     </apply>
                     <ci>x</ci>
                  </apply>
                  <ci>c2</ci>
                  <apply>
                     <times/>
                     <ci>c3</ci>
                     <ci>u</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="z">
      <variable name="z" units="dimensionless" initial_value="1" public_interface="out"/>
      <variable name="r5" units="rate" initial_value="0.09"/>
      <variable name="r6" units="rate" initial_value="0.1"/>
      <variable name="r7" units="rate" initial_value="0.05"/>
      <variable name="z_" units="dimensionless" initial_value="1.01"/>
      <variable name="y_" units="dimensionless" initial_value="1.08"/>
      <variable name="delta" units="dimensionless" initial_value="0.01"/>
      <variable name="y" units="dimensionless" public_interface="in"/>
      <variable name="epsilon" units="dimensionless" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>z</ci>
            </apply>
            <apply>
               <times/>
               <ci>epsilon</ci>
               <ci>delta</ci>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <ci>r5</ci>
                        <apply>
                           <minus/>
                           <ci>y</ci>
                           <ci>y_</ci>
                        </apply>
                        <apply>
                           <minus/>
                           <ci>z_</ci>
                           <ci>z</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>r6</ci>
                        <ci>z</ci>
                        <apply>
                           <minus/>
                           <ci>z_</ci>
                           <ci>z</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>r7</ci>
                     <ci>z</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="u">
      <variable name="u" units="dimensionless" initial_value="1" public_interface="out"/>
      <variable name="omega" units="rate" initial_value="0.05"/>
      <variable name="v" units="dimensionless" initial_value="0"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>u</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <minus/>
                  <ci>omega</ci>
               </apply>
               <ci>v</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>v</ci>
            </apply>
            <apply>
               <times/>
               <ci>omega</ci>
               <ci>u</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="model_constants">
      <variable name="epsilon" units="dimensionless" initial_value="0.1" public_interface="out"/>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="x" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="y" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="z" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="u" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="x" component_2="y"/>
      <map_variables variable_1="y" variable_2="y"/>
      <map_variables variable_1="x" variable_2="x"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="z" component_2="y"/>
      <map_variables variable_1="y" variable_2="y"/>
      <map_variables variable_1="z" variable_2="z"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="u" component_2="y"/>
      <map_variables variable_1="u" variable_2="u"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="z" component_2="x"/>
      <map_variables variable_1="z" variable_2="z"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="y" component_2="model_constants"/>
      <map_variables variable_1="epsilon" variable_2="epsilon"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="z" component_2="model_constants"/>
      <map_variables variable_1="epsilon" variable_2="epsilon"/>
   </connection>
</model>
