// This CellML file was generated on 22/10/2009 at 4:21:26 at p.m. using:
//
// COR (0.9.31.1325)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// comment: This is the CellML description of Jafri, Rice and Winslow's mathematical model for calcium regulation in the ventricular myocyte. It is based on an accurate model of the membrane currents and adds a more sophisticated model of calcium handling. The JRW model is based on the LR-II model for ventricular action potentials, with several modifications.; FN Catherine Lloyd
// bio_entity: Ventricular Myocyte
// simulation: endingValue 3000; pointDensity 100000; maximumStepSize 0.1
// title: The Jafri-Rice-Winslow Model for Calcium Regulation in the Ventricular Myocyte, 1997
// species: Mammalia
// reference: Pubmed_id 9512016; title Cardiac Ca2+ Dynamics: The Roles of Ryanodine Receptor Adaptation and Sarcoplasmic Reticulum Load; Given M; Family Jafri; Other Saleet; Given John; Family Rice; Other Jeremy; Given Raimond; Family Winslow; Other L; volume 74; first_page 1149; title Biophysical Journal; W3CDTF 1998-03-01; last_page 1168
def model jafri_rice_winslow_1998_version02 as
  // Jafri-Rice-Winslow Ventricular Model 1998
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model is known to run in both PCEnv and COR, and has been curated by Penny Noble of Oxford University. This variant also contains an embedded CellML description of Niederer, Hunter and Smith's quantitative model of cardiac myocyte regulation. The reference for this paper is given below.
  //
  // Model Structure
  //
  // ABSTRACT: We construct a detailed mathematical model for Ca2+ regulation in the ventricular myocyte that includes novel descriptions of subcellular mechanisms based on recent experimental findings: 1) the Keizer-Levine model for the ryanodine receptor (RyR), which displays adaptation at elevated Ca2+; 2) a model for the L-type Ca2+ channel that inactivates by mode switching; and 3) a restricted subspace into which the RyRs and L-type Ca2+ channels empty and interact via Ca2+. We add membrane currents from the Luo-Rudy Phase II ventricular cell model to our description of Ca2+ handling to formulate a new model for ventricular action potentials and Ca2+ regulation. The model can simulate Ca2+ transients during an action potential similar to those seen experimentally. The subspace [Ca2+] rises more rapidly and reaches a higher level (10-30 microM) than the bulk myoplasmic Ca2+ (peak [Ca2+]i approximately 1 microM). Termination of sarcoplasmic reticulum (SR) Ca2+ release is predominately due to emptying of the SR, but is influenced by RyR adaptation. Because force generation is roughly proportional to peak myoplasmic Ca2+, we use [Ca2+]i in the model to explore the effects of pacing rate on force generation. The model reproduces transitions seen in force generation due to changes in pacing that cannot be simulated by previous models. Simulation of such complex phenomena requires an interplay of both RyR adaptation and the degree of SR Ca2+ loading. This model, therefore, shows improved behavior over existing models that lack detailed descriptions of subcellular Ca2+ regulatory mechanisms.
  //
  // The original paper reference is cited below:
  //
  // Cardiac Calcium Dynamics: The Roles of Ryanodine Receptor Adaptation and Sarcoplasmic Reticulum Load, M. Saleet Jafri, J. Jeremy Rice and Raimond L. Winslow, 1998, Biophysical Journal, 74, 1149-1168. PubMed ID: 9512016 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=9512016&dopt=Abstract)
  //
  // The reference for the embedded Niederer Hunter Smith model of cardiac myocyte relaxation is: "A Quantitative Analysis of Cardiac Myocyte Relaxation: A Simulation Study" Niederer, S.A., Hunter, P.J., Smith, N.P, Biophysical Journal, Volume 90, March 2006, pp. 1697-1722.
  //
  // cell diagram of the Jafri-Rice-Winslow model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the Jafri-Rice-Winslow model.
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_mm as
    unit metre {expo: -1, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mS_per_mm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit mM as
    unit mole {pref: nano};
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit per_mM3_per_ms as
    unit mM {expo: -3};
    unit ms {expo: -1};
  enddef;
  def unit per_mM4_per_ms as
    unit mM {expo: -4};
    unit ms {expo: -1};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit uA_per_mm2 as
    unit ampere {pref: micro};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit uA_per_mmcu as
    unit ampere {pref: micro};
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit mm_per_ms as
    unit metre {pref: milli};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit gas_constant_units as
    unit joule {pref: pico};
    unit mole {expo: -1, pref: nano};
    unit kelvin {expo: -1};
  enddef;
  def unit faradays_constant_units as
    unit coulomb {pref: nano};
    unit mole {expo: -1, pref: nano};
  enddef;
  def unit micrometer as
    unit metre {pref: micro};
  enddef;
  def unit N_per_mm2 as
    unit newton;
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit balancing as
    unit uA_per_mm2;
    unit mm_per_ms {expo: -1};
    unit mM {expo: -1};
    unit faradays_constant_units {expo: -1};
  enddef;

  def comp environment as
    var time: ms {pub: out};
    var lambda: dimensionless {init: 1, pub: out};
    var dlambdadt: per_ms {init: 0, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0042391
  def comp membrane as
    var V: mV {init: -84.1638, pub: out};
    var R: gas_constant_units {init: 8.3145e3, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: faradays_constant_units {init: 9.6845e4, pub: out};
    var time: ms {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Ca_L_Ca: uA_per_mm2 {pub: in};
    var i_Ca_L_K: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_ns_Ca: uA_per_mm2 {pub: in};
    var Cm: uF_per_mm2 {init: 0.01};
    var I_stim: uA_per_mm2;
    var stim_start: ms {init: 100};
    var stim_end: ms {init: 9000};
    var stim_period: ms {init: 750};
    var stim_duration: ms {init: 1};
    var stim_amplitude: uA_per_mm2 {init: -100};
    ode(V, time) = (i_Na+i_Ca_L_Ca+i_Ca_L_K+i_K+i_NaCa+i_K1+i_Kp+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca+I_stim)/Cm;
    I_stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{uA_per_mm2};
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current as
    var i_Na: uA_per_mm2 {pub: out};
    var E_Na: mV {pub: out};
    var g_Na: mS_per_mm2 {init: 0.128};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0328302, pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_m = 0.32{per_mV_ms}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    beta_m = 0.08{per_ms}*exp(-V/11{mV});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.988354, pub: out};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40{mV}:
        0.135{per_ms}*exp((80{mV}+V)/(-6.8{mV}));
      otherwise:
        0{per_ms};
    endsel;
    beta_h = sel
      case V < -40{mV}:
        3.56{per_ms}*exp(0.079{per_mV}*V)+310000{per_ms}*exp(0.35{per_mV}*V);
      otherwise:
        1{dimensionless}/(0.13{ms}*(1{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
    endsel;
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 0.99254, pub: out};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40{mV}:
        (-127140{per_mV_ms}*exp(0.2444{per_mV}*V)-0.00003474{per_mV_ms}*exp(-0.04391{per_mV}*V))*(V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
      otherwise:
        0{per_ms};
    endsel;
    beta_j = sel
      case V < -40{mV}:
        0.1212{per_ms}*exp(-0.01052{per_mV}*V)/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.3{per_ms}*exp(-0.0000002535{per_mV}*V)/(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV})));
    endsel;
    ode(j, time) = alpha_j*(1{dimensionless}-j)-beta_j*j;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0070509
  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  def comp L_type_Ca_channel as
    var i_Ca_L_Ca: uA_per_mm2 {pub: out};
    var i_Ca_L_K: uA_per_mm2 {pub: out};
    var P_Ca: mm_per_ms {init: 33.75e-6};
    var P_K: mm_per_ms {init: 1e-9};
    var p_k: mm_per_ms;
    var i_Ca_L_Ca_half: uA_per_mm2 {init: -4.58e-3};
    var i_Ca_L_Ca_max: uA_per_mm2;
    var O: dimensionless {init: 9.84546e-21};
    var O_Ca: dimensionless {init: 0};
    var alpha: per_ms;
    var beta: per_ms;
    var gamma: per_ms;
    var alpha_a: per_ms;
    var beta_b: per_ms;
    var a: dimensionless {init: 2};
    var b: dimensionless {init: 2};
    var g: per_ms {init: 2};
    var f: per_ms {init: 0.3};
    var g_: per_ms {init: 0};
    var f_: per_ms {init: 0};
    var omega: per_ms {init: 0.01};
    var C0: dimensionless {init: 0.997208};
    var C1: dimensionless {init: 6.38897e-5};
    var C2: dimensionless {init: 1.535e-9};
    var C3: dimensionless {init: 1.63909e-14};
    var C4: dimensionless {init: 6.56337e-20};
    var C_Ca0: dimensionless {init: 2.72826e-3};
    var C_Ca1: dimensionless {init: 6.99215e-7};
    var C_Ca2: dimensionless {init: 6.71989e-11};
    var C_Ca3: dimensionless {init: 2.87031e-15};
    var C_Ca4: dimensionless {init: 4.59752e-20};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Ca_SS: mM {pub: in};
    var Cao: mM {pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var y: dimensionless {priv: in};
    i_Ca_L_Ca = i_Ca_L_Ca_max*y*(O+O_Ca);
    i_Ca_L_K = 1{balancing}*p_k*y*(O+O_Ca)*V*sqr(F)/(R*T)*(Ki*exp(V*F/(R*T))-Ko)/(exp(V*F/(R*T))-1{dimensionless});
    p_k = P_K/(1{dimensionless}+i_Ca_L_Ca_max/i_Ca_L_Ca_half);
    i_Ca_L_Ca_max = 1{balancing}*(P_Ca*4{dimensionless}*V*sqr(F)/(R*T)*(0.001{mM}*exp(2{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless}));
    alpha = 0.4{per_ms}*exp((V+12{mV})/10{mV});
    beta = 0.05{per_ms}*exp((V+12{mV})/(-13{mV}));
    alpha_a = alpha*a;
    beta_b = beta/b;
    gamma = 0.1875{per_ms}*Ca_SS/1{mM};
    ode(C0, time) = beta*C1+omega*C_Ca0-(4{dimensionless}*alpha+gamma)*C0;
    ode(C1, time) = 4{dimensionless}*alpha*C0+2{dimensionless}*beta*C2+omega/b*C_Ca1-(beta+3{dimensionless}*alpha+gamma*a)*C1;
    ode(C2, time) = 3{dimensionless}*alpha*C1+3{dimensionless}*beta*C3+omega/sqr(b)*C_Ca2-(beta*2{dimensionless}+2{dimensionless}*alpha+gamma*sqr(a))*C2;
    ode(C3, time) = 2{dimensionless}*alpha*C2+4{dimensionless}*beta*C4+omega/pow(b, 3{dimensionless})*C_Ca3-(beta*3{dimensionless}+alpha+gamma*pow(a, 3{dimensionless}))*C3;
    ode(C4, time) = alpha*C3+g*O+omega/pow(b, 4{dimensionless})*C_Ca4-(beta*4{dimensionless}+f+gamma*pow(a, 4{dimensionless}))*C4;
    ode(O, time) = f*C4-g*O;
    ode(C_Ca0, time) = beta_b*C_Ca1+gamma*C_Ca0-(4{dimensionless}*alpha_a+omega)*C_Ca0;
    ode(C_Ca1, time) = 4{dimensionless}*alpha_a*C_Ca0+2{dimensionless}*beta_b*C_Ca2+gamma*a*C1-(beta_b+3{dimensionless}*alpha_a+omega/b)*C_Ca1;
    ode(C_Ca2, time) = 3{dimensionless}*alpha_a*C_Ca1+3{dimensionless}*beta_b*C_Ca3+gamma*sqr(a)*C2-(beta_b*2{dimensionless}+2{dimensionless}*alpha_a+omega/sqr(b))*C_Ca2;
    ode(C_Ca3, time) = 2{dimensionless}*alpha_a*C_Ca2+4{dimensionless}*beta_b*C_Ca4+gamma*pow(a, 3{dimensionless})*C3-(beta_b*3{dimensionless}+alpha_a+omega/pow(b, 3{dimensionless}))*C_Ca3;
    ode(C_Ca4, time) = alpha_a*C_Ca3+g_*O_Ca+gamma*pow(a, 4{dimensionless})*C4-(beta_b*4{dimensionless}+f_+omega/pow(b, 4{dimensionless}))*C_Ca4;
    ode(O_Ca, time) = f_*C_Ca4-g_*O_Ca;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0070509
  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  def comp L_type_Ca_channel_y_gate as
    var y: dimensionless {init: 0.998983, pub: out};
    var y_infinity: dimensionless;
    var tau_y: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(y, time) = (y_infinity-y)/tau_y;
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+55{mV})/7.5{mV}))+0.1{dimensionless}/(1{dimensionless}+exp((-V+21{mV})/6{mV}));
    tau_y = 20{ms}+600{ms}/(1{dimensionless}+exp((V+30{mV})/9.5{mV}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp time_dependent_potassium_current as
    var i_K: uA_per_mm2 {pub: out};
    var g_K: mS_per_mm2;
    var g_K_max: mS_per_mm2 {init: 0.001128};
    var E_K: mV;
    var P_NaK: dimensionless {init: 0.01833};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var X: dimensionless {priv: in};
    var Xi: dimensionless {priv: in};
    g_K = g_K_max*sqrt(Ko/5.4{mM});
    E_K = R*T/F*ln((Ko+P_NaK*Nao)/(Ki+P_NaK*Nai));
    i_K = g_K*Xi*sqr(X)*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp time_dependent_potassium_current_X_gate as
    var X: dimensionless {init: 0.000928836, pub: out};
    var alpha_X: per_ms;
    var beta_X: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_X = 0.0000719{per_mV_ms}*(V+30{mV})/(1{dimensionless}-exp(-0.148{per_mV}*(V+30{mV})));
    beta_X = 0.000131{per_mV_ms}*(V+30{mV})/(-1{dimensionless}+exp(0.0687{per_mV}*(V+30{mV})));
    ode(X, time) = alpha_X*(1{dimensionless}-X)-beta_X*X;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp time_dependent_potassium_current_Xi_gate as
    var Xi: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    Xi = 1{dimensionless}/(1{dimensionless}+exp((V-56.26{mV})/32.1{mV}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0055075
  // isVersionOf: http://identifiers.org/go/GO:0022841
  def comp time_independent_potassium_current as
    var i_K1: uA_per_mm2 {pub: out};
    var E_K1: mV {priv: out, pub: out};
    var g_K1: mS_per_mm2;
    var g_K1_max: mS_per_mm2 {init: 7.5e-3};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = g_K1_max*sqrt(Ko/5.4{mM});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0055075
  // isVersionOf: http://identifiers.org/go/GO:0022841
  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var E_K1: mV {pub: in};
    alpha_K1 = 1.02{per_ms}/(1{dimensionless}+exp(0.2385{per_mV}*(V-E_K1-59.215{mV})));
    beta_K1 = 0.49124{per_ms}*(exp(0.08032{per_mV}*(V+5.476{mV}-E_K1))+exp(0.06175{per_mV}*(V-(E_K1+594.31{mV}))))/(1{dimensionless}+exp(-0.5143{per_mV}*(V-E_K1+4.753{mV})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp plateau_potassium_current as
    var i_Kp: uA_per_mm2 {pub: out};
    var E_Kp: mV;
    var g_Kp: mS_per_mm2 {init: 8.28e-5};
    var Kp: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_K1: mV {pub: in};
    E_Kp = E_K1;
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp Na_Ca_exchanger as
    var i_NaCa: uA_per_mm2 {pub: out};
    var k_NaCa: uA_per_mm2 {init: 50};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var k_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    i_NaCa = k_NaCa*1{dimensionless}/(pow(K_mNa, 3{dimensionless})+pow(Nao, 3{dimensionless}))*1{dimensionless}/(K_mCa+Cao)*1{dimensionless}/(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*V*F/(R*T)))*(exp(eta*V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Nao, 3{dimensionless})*Cai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0070509
  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  // isVersionOf: http://identifiers.org/go/GO:0060401
  // isVersionOf: http://identifiers.org/go/GO:0070588
  // isVersionOf: http://identifiers.org/go/GO:0055074
  // isVersionOf: http://identifiers.org/go/GO:0015085
  // isVersionOf: http://identifiers.org/go/GO:0006816
  // isVersionOf: http://identifiers.org/go/GO:0051480
  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: uA_per_mm2 {pub: out};
    var K_mpCa: mM {init: 0.5e-3};
    var I_pCa: uA_per_mm2 {init: 1.15e-2};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    i_p_Ca = I_pCa*Cai/(K_mpCa+Cai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0055078
  def comp sodium_background_current as
    var i_Na_b: uA_per_mm2 {pub: out};
    var g_Nab: mS_per_mm2 {init: 1.41e-5};
    var E_NaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    E_NaN = E_Na;
    i_Na_b = g_Nab*(V-E_NaN);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0055074
  def comp calcium_background_current as
    var i_Ca_b: uA_per_mm2 {pub: out};
    var g_Cab: mS_per_mm2 {init: 6.032e-5};
    var E_CaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    E_CaN = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_CaN);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/chebi/CHEBI:38634
  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0008511
  // isVersionOf: http://identifiers.org/go/GO:0005391
  // isVersionOf: http://identifiers.org/go/GO:0006815
  def comp sodium_potassium_pump as
    var i_NaK: uA_per_mm2 {pub: out};
    var I_NaK: uA_per_mm2 {init: 0.013};
    var f_NaK: dimensionless;
    var K_mNai: mM {init: 10};
    var K_mKo: mM {init: 1.5};
    var sigma: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67.3{mM})-1{dimensionless});
    i_NaK = I_NaK*f_NaK*1{dimensionless}/(1{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless}))*Ko/(Ko+K_mKo);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: uA_per_mm2 {pub: out};
    var i_ns_Na: uA_per_mm2 {pub: out};
    var i_ns_K: uA_per_mm2 {pub: out};
    var I_ns_Na: uA_per_mm2;
    var I_ns_K: uA_per_mm2;
    var K_m_ns_Ca: mM {init: 1.2e-3};
    var P_ns_Ca: mm_per_ms {init: 1.75e-9};
    var EnsCa: mV;
    var VnsCa: mV;
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    EnsCa = R*T/F*ln((Ko+Nao)/(Ki+Nai));
    VnsCa = V-EnsCa;
    i_ns_Na = I_ns_Na*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_K = I_ns_K*1{dimensionless}/(1{dimensionless}+pow(K_m_ns_Ca/Cai, 3{dimensionless}));
    i_ns_Ca = i_ns_Na+i_ns_K;
    I_ns_Na = 1{balancing}*P_ns_Ca*sqr(1{dimensionless})*VnsCa*sqr(F)/(R*T)*(0.75{dimensionless}*Nai*exp(VnsCa*F/(R*T))-0.75{dimensionless}*Nao)/(exp(VnsCa*F/(R*T))-1{dimensionless});
    I_ns_K = 1{balancing}*P_ns_Ca*sqr(1{dimensionless})*VnsCa*sqr(F)/(R*T)*(0.75{dimensionless}*Ki*exp(VnsCa*F/(R*T))-0.75{dimensionless}*Ko)/(exp(VnsCa*F/(R*T))-1{dimensionless});
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp calcium_subsystem as
    var Cai: mM {init: 9.94893e-11, pub: out};
    var Ca_SS: mM {init: 1.36058e-4, pub: out};
    var Am: per_mm {init: 546.69, pub: out};
    var V_myo: dimensionless {init: 0.92, pub: out};
    var RyR_open: dimensionless;
    var P_O1: dimensionless {init: 1.19168e-3};
    var P_O2: dimensionless {init: 6.30613e-9};
    var P_C1: dimensionless {init: 0.762527};
    var P_C2: dimensionless {init: 0.236283};
    var v1: per_ms {init: 1.8};
    var v2: per_ms {init: 0.58e-4};
    var v3: mM_per_ms {init: 1.8e-3};
    var nCa: dimensionless {init: 4};
    var mCa: dimensionless {init: 3};
    var k_a_plus: per_mM4_per_ms {init: 1.215e10};
    var k_a_minus: per_ms {init: 0.1425};
    var k_b_plus: per_mM3_per_ms {init: 4.05e7};
    var k_b_minus: per_ms {init: 1.93};
    var k_c_plus: per_ms {init: 0.018};
    var k_c_minus: per_ms {init: 0.0008};
    var k_htrpn_plus: per_mM_per_ms {init: 20};
    var k_htrpn_minus: per_ms {init: 0.066e-3};
    var k_ltrpn_plus: per_mM_per_ms {init: 40};
    var k_ltrpn_minus: per_ms {init: 0.04};
    var tau_tr: ms {init: 34.48};
    var Ca_JSR: mM {init: 1.17504};
    var Ca_NSR: mM {init: 1.243891};
    var V_JSR: dimensionless;
    var V_NSR: dimensionless;
    var V_SS: dimensionless;
    var K_mup: mM {init: 0.5e-3};
    var K_mCMDN: mM {init: 2.38e-3};
    var K_mCSQN: mM {init: 0.8};
    var tau_xfer: ms {init: 3.125};
    var HTRPN_tot: mM {init: 0.14};
    var LTRPN_tot: mM {init: 0.07};
    var HTRPNCa: mM {init: 0.13598};
    var LTRPNCa: mM {init: 0.00635};
    var CSQN_tot: mM {init: 15};
    var CMDN_tot: mM {init: 0.05};
    var Bi: dimensionless;
    var B_SS: dimensionless;
    var B_JSR: dimensionless;
    var J_rel: mM_per_ms;
    var J_leak: mM_per_ms;
    var J_up: mM_per_ms;
    var J_tr: mM_per_ms;
    var J_xfer: mM_per_ms;
    var J_trpn: mM_per_ms;
    var J_htrpn: mM_per_ms;
    var J_ltrpn: mM_per_ms;
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_Ca_L_Ca: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    V_SS = 5.828e-5{dimensionless}*V_myo;
    V_NSR = 0.081{dimensionless}*V_myo;
    V_JSR = 0.00464{dimensionless}*V_myo;
    J_rel = v1*RyR_open*(Ca_JSR-Ca_SS);
    RyR_open = P_O1+P_O2;
    ode(P_C1, time) = -k_a_plus*pow(Ca_SS, nCa)*P_C1+k_a_minus*P_O1;
    ode(P_O1, time) = k_a_plus*pow(Ca_SS, nCa)*P_C1-(k_a_minus*P_O1+k_b_plus*pow(Ca_SS, mCa)*P_O1+k_c_plus*P_O1)+k_b_minus*P_O2+k_c_minus*P_C2;
    ode(P_O2, time) = k_b_plus*pow(Ca_SS, mCa)*P_O1-k_b_minus*P_O2;
    ode(P_C2, time) = k_c_plus*P_O1-k_c_minus*P_C2;
    J_leak = v2*(Ca_NSR-Cai);
    J_up = v3*sqr(Cai)/(sqr(K_mup)+sqr(Cai));
    J_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    J_xfer = (Ca_SS-Cai)/tau_xfer;
    J_htrpn = k_htrpn_plus*Cai*(HTRPN_tot-HTRPNCa)-k_htrpn_minus*HTRPNCa;
    J_ltrpn = k_ltrpn_plus*Cai*(LTRPN_tot-LTRPNCa)-k_ltrpn_minus*LTRPNCa;
    J_trpn = J_htrpn+J_ltrpn;
    ode(HTRPNCa, time) = J_htrpn;
    ode(LTRPNCa, time) = J_ltrpn;
    Bi = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Cai));
    B_SS = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_SS));
    B_JSR = 1{dimensionless}/(1{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
    ode(Cai, time) = Bi*(J_leak+J_xfer-(J_up+J_trpn+(i_Ca_b-2{dimensionless}*i_NaCa+i_p_Ca)*Am/(2{dimensionless}*V_myo*F)));
    ode(Ca_SS, time) = B_SS*(J_rel*V_JSR/V_SS-J_xfer*V_myo/V_SS-i_Ca_L_Ca*Am/(2{dimensionless}*V_SS*F));
    ode(Ca_JSR, time) = B_JSR*(J_tr-J_rel);
    ode(Ca_NSR, time) = (J_up-J_leak)*V_myo/V_NSR-J_tr*V_JSR/V_NSR;
  enddef;

  def comp ionic_concentrations as
    var Nai: mM {init: 10.2042, pub: out};
    var Nao: mM {init: 140, pub: out};
    var Ki: mM {init: 143.727, pub: out};
    var Ko: mM {init: 5.4, pub: out};
    var Cao: mM {init: 1.8, pub: out};
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_ns_Na: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_Ca_L_K: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_ns_K: uA_per_mm2 {pub: in};
    var Am: per_mm {pub: in};
    var V_myo: dimensionless {pub: in};
    ode(Nai, time) = -(i_Na+i_Na_b+i_ns_Na+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless})*Am/(V_myo*F);
    ode(Ki, time) = -(i_Ca_L_K+i_K+i_K1+i_Kp+i_ns_K+(-i_NaK*2{dimensionless}))*Am/(V_myo*F);
    ode(Ko, time) = (i_Ca_L_K+i_K+i_K1+i_Kp+i_ns_K+(-i_NaK*2{dimensionless}))*Am/(V_myo*F);
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:67897
  def comp Myofilaments as
    var time: ms {pub: in};
    var lambda: dimensionless {pub: in};
    var dlambdadt: per_ms {pub: in};
    var Cai: mM {pub: in};
    var Tref: N_per_mm2 {init: 56.2};
    var beta0: dimensionless {init: 4.9};
    var a: dimensionless {init: 0.35};
    var Q1: dimensionless {init: 0};
    var Q2: dimensionless {init: 0};
    var Q3: dimensionless {init: 0};
    var A1: dimensionless {init: -29};
    var A2: dimensionless {init: 138};
    var A3: dimensionless {init: 129};
    var alpha1: dimensionless {init: 0.03};
    var alpha2: dimensionless {init: 0.13};
    var alpha3: dimensionless {init: 0.625};
    var Ca50ref: mM {init: 1.05e-3};
    var zp: dimensionless {init: 0.85};
    var beta1: dimensionless {init: -4};
    var alpha0: per_ms {init: 8e-3};
    var alphar1: per_ms {init: 2e-3};
    var alphar2: per_ms {init: 1.75e-3};
    var nRel: dimensionless {init: 3};
    var Kz: dimensionless {init: 0.15};
    var nHill: dimensionless {init: 3};
    var kon: per_mM_per_ms {init: 100};
    var koff: per_ms {init: 0.2};
    var gamma_trpn: dimensionless {init: 2};
    var TRPN_tot: mM {init: 0.07};
    var T0: N_per_mm2;
    var T0max: N_per_mm2;
    var z: dimensionless {init: 0};
    var z_max: dimensionless;
    var Q: dimensionless;
    var Cab: mM {init: 0};
    var Ca50: mM;
    var CaTRPN50: mM;
    var K_2: dimensionless;
    var K_1: dimensionless;
    var Tension: N_per_mm2;
    ode(Cab, time) = kon*Cai*(TRPN_tot-Cab)-koff*(1{dimensionless}-Tension/(gamma_trpn*Tref))*Cab;
    K_2 = 1{ms}*(alphar2*pow(zp, nRel)/(pow(zp, nRel)+pow(Kz, nRel))*(1{dimensionless}-nRel*pow(Kz, nRel)/(pow(zp, nRel)+pow(Kz, nRel))));
    K_1 = 1{ms}*(alphar2*pow(zp, nRel-1{dimensionless})*nRel*pow(Kz, nRel)/sqr(pow(zp, nRel)+pow(Kz, nRel)));
    z_max = alpha0*1{ms}/pow(CaTRPN50/TRPN_tot, nHill)-K_2*1{per_ms}/(alphar1+K_1*1{per_ms}+alpha0/pow(CaTRPN50/TRPN_tot, nHill));
    Ca50 = Ca50ref*(1{dimensionless}+beta1*(lambda-1{dimensionless}));
    CaTRPN50 = Ca50*TRPN_tot/(Ca50+koff/kon*(1{dimensionless}-(1{dimensionless}+beta0*(lambda-1{dimensionless}))*0.5{dimensionless}/gamma_trpn));
    ode(z, time) = alpha0*pow(Cab/CaTRPN50, nHill)*(1{dimensionless}-z)+(-z*alphar1)+(-alphar2*pow(z, nRel)/(pow(z, nRel)+pow(Kz, nRel)));
    T0max = Tref*(1{dimensionless}+beta0*(lambda-1{dimensionless}));
    T0 = T0max*z/z_max;
    Tension = sel
      case Q < 0{dimensionless}:
        T0*(a*Q+1{dimensionless})/(1{dimensionless}-Q);
      otherwise:
        T0*(1{dimensionless}-(a+2{dimensionless})*Q)/(1{dimensionless}+Q);
    endsel;
    ode(Q1, time) = A1*dlambdadt-1{per_ms}*(alpha1*Q1);
    ode(Q2, time) = A2*dlambdadt-1{per_ms}*(alpha2*Q2);
    ode(Q3, time) = A3*dlambdadt-1{per_ms}*(alpha3*Q3);
    Q = Q1+Q2+Q3;
  enddef;

  def group as containment for
    // isVersionOf: http://identifiers.org/go/GO:0060075
    // isVersionOf: http://identifiers.org/go/GO:0030322
    // isVersionOf: http://identifiers.org/go/GO:0042391
    comp membrane incl
      // isVersionOf: http://identifiers.org/go/GO:0001518
      // isVersionOf: http://identifiers.org/go/GO:0005248
      // isVersionOf: http://identifiers.org/go/GO:0005272
      // isVersionOf: http://identifiers.org/go/GO:0034706
      comp fast_sodium_current incl
        // isVersionOf: http://identifiers.org/go/GO:0001518
        // isVersionOf: http://identifiers.org/go/GO:0005248
        // isVersionOf: http://identifiers.org/go/GO:0005272
        // isVersionOf: http://identifiers.org/go/GO:0034706
        comp fast_sodium_current_m_gate;
        // isVersionOf: http://identifiers.org/go/GO:0001518
        // isVersionOf: http://identifiers.org/go/GO:0005248
        // isVersionOf: http://identifiers.org/go/GO:0005272
        // isVersionOf: http://identifiers.org/go/GO:0034706
        comp fast_sodium_current_h_gate;
        // isVersionOf: http://identifiers.org/go/GO:0001518
        // isVersionOf: http://identifiers.org/go/GO:0005248
        // isVersionOf: http://identifiers.org/go/GO:0005272
        // isVersionOf: http://identifiers.org/go/GO:0034706
        comp fast_sodium_current_j_gate;
      endcomp;
      // isVersionOf: http://identifiers.org/go/GO:0005262
      // isVersionOf: http://identifiers.org/go/GO:0034704
      // isVersionOf: http://identifiers.org/go/GO:0005245
      // isVersionOf: http://identifiers.org/go/GO:0005891
      // isVersionOf: http://identifiers.org/go/GO:0070509
      comp L_type_Ca_channel incl
        // isVersionOf: http://identifiers.org/go/GO:0005262
        // isVersionOf: http://identifiers.org/go/GO:0034704
        // isVersionOf: http://identifiers.org/go/GO:0005245
        // isVersionOf: http://identifiers.org/go/GO:0005891
        // isVersionOf: http://identifiers.org/go/GO:0070509
        // isVersionOf: http://identifiers.org/go/GO:0060401
        comp L_type_Ca_channel_y_gate;
      endcomp;
      // isVersionOf: http://identifiers.org/go/GO:0005249
      // isVersionOf: http://identifiers.org/go/GO:0008076
      // isVersionOf: http://identifiers.org/go/GO:0005267
      // isVersionOf: http://identifiers.org/go/GO:0034705
      comp time_dependent_potassium_current incl
        // isVersionOf: http://identifiers.org/go/GO:0005249
        // isVersionOf: http://identifiers.org/go/GO:0008076
        // isVersionOf: http://identifiers.org/go/GO:0005267
        // isVersionOf: http://identifiers.org/go/GO:0034705
        comp time_dependent_potassium_current_X_gate;
        // isVersionOf: http://identifiers.org/go/GO:0005249
        // isVersionOf: http://identifiers.org/go/GO:0008076
        // isVersionOf: http://identifiers.org/go/GO:0005267
        // isVersionOf: http://identifiers.org/go/GO:0034705
        comp time_dependent_potassium_current_Xi_gate;
      endcomp;
      // isVersionOf: http://identifiers.org/go/GO:0030181
      comp Na_Ca_exchanger;
      // isVersionOf: http://identifiers.org/go/GO:0005267
      // isVersionOf: http://identifiers.org/go/GO:0034705
      // isVersionOf: http://identifiers.org/go/GO:0055075
      // isVersionOf: http://identifiers.org/go/GO:0022841
      comp time_independent_potassium_current incl
        // isVersionOf: http://identifiers.org/go/GO:0005267
        // isVersionOf: http://identifiers.org/go/GO:0034705
        // isVersionOf: http://identifiers.org/go/GO:0055075
        // isVersionOf: http://identifiers.org/go/GO:0022841
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      // isVersionOf: http://identifiers.org/go/GO:0005249
      // isVersionOf: http://identifiers.org/go/GO:0008076
      // isVersionOf: http://identifiers.org/go/GO:0005267
      // isVersionOf: http://identifiers.org/go/GO:0034705
      comp plateau_potassium_current;
      // isVersionOf: http://identifiers.org/go/GO:0005262
      // isVersionOf: http://identifiers.org/go/GO:0034704
      // isVersionOf: http://identifiers.org/go/GO:0070509
      // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
      // isVersionOf: http://identifiers.org/go/GO:0060401
      // isVersionOf: http://identifiers.org/go/GO:0070588
      // isVersionOf: http://identifiers.org/go/GO:0055074
      // isVersionOf: http://identifiers.org/go/GO:0015085
      // isVersionOf: http://identifiers.org/go/GO:0006816
      // isVersionOf: http://identifiers.org/go/GO:0051480
      // isVersionOf: http://identifiers.org/go/GO:0005388
      // isVersionOf: http://identifiers.org/go/GO:0006874
      comp sarcolemmal_calcium_pump;
      // isVersionOf: http://identifiers.org/go/GO:0005272
      // isVersionOf: http://identifiers.org/go/GO:0034706
      // isVersionOf: http://identifiers.org/go/GO:0055078
      comp sodium_background_current;
      // isVersionOf: http://identifiers.org/go/GO:0005262
      // isVersionOf: http://identifiers.org/go/GO:0034704
      // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
      // isVersionOf: http://identifiers.org/go/GO:0055074
      comp calcium_background_current;
      // isVersionOf: http://identifiers.org/go/GO:0005890
      // isVersionOf: http://identifiers.org/go/GO:0008511
      // isVersionOf: http://identifiers.org/go/GO:0005391
      // isVersionOf: http://identifiers.org/go/GO:0006815
      // isVersionOf: http://identifiers.org/go/GO:0009674
      comp sodium_potassium_pump;
      // isVersionOf: http://identifiers.org/go/GO:0005262
      // isVersionOf: http://identifiers.org/go/GO:0034704
      // isVersionOf: http://identifiers.org/go/GO:0005245
      // isVersionOf: http://identifiers.org/go/GO:0005891
      comp non_specific_calcium_activated_current;
      // isVersionOf: http://identifiers.org/go/GO:0005262
      // isVersionOf: http://identifiers.org/go/GO:0034704
      // isVersionOf: http://identifiers.org/go/GO:0005245
      // isVersionOf: http://identifiers.org/go/GO:0005891
      comp calcium_subsystem;
      comp ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    comp fast_sodium_current incl
      // isVersionOf: http://identifiers.org/go/GO:0001518
      // isVersionOf: http://identifiers.org/go/GO:0005248
      // isVersionOf: http://identifiers.org/go/GO:0005272
      // isVersionOf: http://identifiers.org/go/GO:0034706
      comp fast_sodium_current_m_gate;
      // isVersionOf: http://identifiers.org/go/GO:0001518
      // isVersionOf: http://identifiers.org/go/GO:0005248
      // isVersionOf: http://identifiers.org/go/GO:0005272
      // isVersionOf: http://identifiers.org/go/GO:0034706
      comp fast_sodium_current_h_gate;
      // isVersionOf: http://identifiers.org/go/GO:0001518
      // isVersionOf: http://identifiers.org/go/GO:0005248
      // isVersionOf: http://identifiers.org/go/GO:0005272
      // isVersionOf: http://identifiers.org/go/GO:0034706
      comp fast_sodium_current_j_gate;
    endcomp;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38215
    comp L_type_Ca_channel incl
      // isVersionOf: http://identifiers.org/go/GO:0005262
      // isVersionOf: http://identifiers.org/go/GO:0034704
      // isVersionOf: http://identifiers.org/go/GO:0005245
      // isVersionOf: http://identifiers.org/go/GO:0005891
      comp L_type_Ca_channel_y_gate;
    endcomp;
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    comp time_dependent_potassium_current incl
      // isVersionOf: http://identifiers.org/go/GO:0005249
      // isVersionOf: http://identifiers.org/go/GO:0008076
      // isVersionOf: http://identifiers.org/go/GO:0005267
      // isVersionOf: http://identifiers.org/go/GO:0034705
      comp time_dependent_potassium_current_X_gate;
      // isVersionOf: http://identifiers.org/go/GO:0005249
      // isVersionOf: http://identifiers.org/go/GO:0008076
      // isVersionOf: http://identifiers.org/go/GO:0005267
      // isVersionOf: http://identifiers.org/go/GO:0034705
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0055075
    // isVersionOf: http://identifiers.org/go/GO:0022841
    comp time_independent_potassium_current incl
      // isVersionOf: http://identifiers.org/go/GO:0005267
      // isVersionOf: http://identifiers.org/go/GO:0034705
      // isVersionOf: http://identifiers.org/go/GO:0055075
      // isVersionOf: http://identifiers.org/go/GO:0022841
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between calcium_subsystem and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between Myofilaments and environment for
    vars time and time;
    vars lambda and lambda;
    vars dlambdadt and dlambdadt;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between calcium_subsystem and Myofilaments for
    vars Cai and Cai;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
    vars i_Ca_L_K and i_Ca_L_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars i_ns_Ca and i_ns_Ca;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_subsystem for
    vars F and F;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and calcium_subsystem for
    vars Ca_SS and Ca_SS;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars i_Ca_L_K and i_Ca_L_K;
    vars Ki and Ki;
    vars Ko and Ko;
    vars Cao and Cao;
  enddef;
  def map between time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_K and i_K;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Cao and Cao;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and calcium_subsystem for
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between sarcolemmal_calcium_pump and calcium_subsystem for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between calcium_background_current and calcium_subsystem for
    vars Cai and Cai;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars Cao and Cao;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between non_specific_calcium_activated_current and calcium_subsystem for
    vars Cai and Cai;
  enddef;
  def map between ionic_concentrations and calcium_subsystem for
    vars Am and Am;
    vars V_myo and V_myo;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars time and time;
    vars V and V;
    vars E_K1 and E_K1;
    vars K1_infinity and K1_infinity;
  enddef;
enddef;
// rdf:#citationAuthorsSeq
// _1: Given M; Family Jafri; Other Saleet
// _2: Given John; Family Rice; Other Jeremy
// _3: Given Raimond; Family Winslow; Other L
// #L_type_Ca_channel_y_gate
// comment: The voltage-dependent inactivation gate for the L-type calcium channel - the y gate.
// rdf:#1f01afbb-c1b6-438f-97d0-c3969915c018
// value: Rate constants for state changes in mode normal.
// rdf:#dcbb6aa9-ae72-4aa1-abe4-441cfc3eb735
// value: The voltage- and time-dependent activation gate for the time-dependent potassium current - the X gate.
// rdf:#9c262e7e-ab38-4fd7-bd1a-dc1038ecfde3
// value: The potassium permeability of the channel, which depends on the calcium current component.
// #beta_h_calculation_eq
// comment: The closing rate of the h gate.
// rdf:#219f5ab0-c1bc-4800-99db-37938c290bd3
// value: Calculate the uptake flux into the NSR from the myoplasm.
// #E_Kp_calculation_eq
// comment: The channel's reversal potential.
// rdf:#12722d36-293a-4b83-8b20-06f18b5826ea
// value: The time-independent inactivation gate for the time-dependent potassium channel.
// rdf:#903f5c62-f8f7-4436-9a15-9a235803802d
// value: Calculate the translocation flux between the uptake (NSR) and release (JSR) stores.
// rdf:#2eeac2c4-b1fd-4c67-9abc-062101ce6d2b
// value: Calculation of the background sodium current.
// rdf:#da6198e9-5668-4bee-a76e-6da5db8c80ec
// value: The plateau potassium current component contains the equations which describe the contribution of a time independent [K]o-insensitive channel at plateau potentials.
// #ionic_concentrations
// comment: The descriptions of the rate of change of [Na]i and [K]i are the same as the LR-II model.
// rdf:#4c24f963-b2b3-4b4c-a1b7-3bac71e76097
// value: Calculate the current.
// #alpha_h_calculation_eq
// comment: The opening rate of the h gate.
// #C0_diff_eq
// comment: The kinetics of the state transitions in mode normal. In the normal mode, the calcium channel is able to make the transition to the open, conducting state (O) from the closed state (C) at a normal rate.
// #i_ns_Na_calculation_eq
// comment: The sodium component of the channel's current.
// rdf:#e50a5ea4-de41-4321-8f12-1ae320cbcff5
// value: The fast sodium current component contains the differential equations governing the influx of sodium ions through the cell surface membrane into the cell.
// rdf:#bf72189f-a875-4906-8eb1-514525848cbb
// value: The kinetics of the h gate.
// #K1_infinity_calculation_eq
// comment: The steady-state approximation for the K1 gating kinetics.
// rdf:#398816f5-c23b-4cf8-bac4-0528e4302905
// value: The kinetics of calcium binding to the myoplasm buffer troponin - both high and low affinity binding sites.
// rdf:#282e1a65-80d4-4c22-9ea4-7fa13d1b885b
// value: The closing rate of the j gate.
// #J_leak_calculation_eq
// comment: Calculate the leakage flux from the NSR into the myoplasm.
// rdf:#8fef7c77-6810-4289-97d0-2d35d54914cc
// value: The rate of change of intracellular sodium ion concentration.
// #J_rel_calculation_eq
// comment: The calcium release flux from the JSR into the restricted subspace is governed by the fraction of RyR channels in an open state.
// #g_K1_calculation_eq
// comment: Calculation of the maximal channel conductance, dependent on extracellular potassium concentration.
// #E_CaN_calculation_eq
// comment: The reversal potential for the background calcium current.
// rdf:#5321b474-ca6b-4aa0-81d4-0490640fefa8
// value: The reversal potential for the background sodium channel.
// #membrane_voltage_diff_eq
// comment: The kinetics of the transmembrane potential, defined as the sum of all the sarcolemmal currents and an applied stimulus current.
// rdf:#d4ed6796-21bc-4d5a-84d7-7d0f669c1d5e
// value: The time constants for the K1 gate are small enough that the gating variable can be approximated with it's steady-state value.
// #RyR_open_calculation_eq
// comment: The "open" RyR's are those P_O1 and P_O2 states.
// rdf:#0369ac4e-eed4-49da-ae19-79542aa70493
// value: The following equation calculates the reversal potential of the time-independent potassium current.
// rdf:#5845a0e2-5166-485a-8890-5f5ed5d38b27
// value: The total nonspecific calcium activated current.
// #HTRPNCa_diff_eq
// comment: Keep track of the concentration of calcium ions bound to high and low affinity troponin binding sites.
// #calcium_subsystem
// comment: In the JRW model, subcellular calcium regulatory mechanisms are described in detail. There are six calcium fluxes to consider; J_rel, J_leak, J_up, J_tr, J_xfer and J_trpn. In addition, three membrane current fluxes are also necessary for the formulation of calcium regulation; i_p_Ca, i_Ca_L_Ca and i_NaCa.
// rdf:#aee41d98-40e6-4b37-843c-d37f7b7132d9
// value: The opening rate of the K1 gate.
// #Na_Ca_exchanger
// comment: The Na/Ca exchanger component describes how a protein molecule in the cell surface membrane transports Na ions into the cytosol and exports Ca ions into the extracellular volume, in a ratio of 3:1 respectively.
// #f_NaK_calculation_eq
// comment: Calculation of the Na/K pump current.
// #fast_sodium_current_h_gate
// comment: The voltage-dependent inactivation gate for the fast sodium current - the h gate.
// #J_xfer_calculation_eq
// comment: Calculate the calcium flux from the diffusion of calcium out of the restricted subspace into the myoplasm.
// rdf:#1647eb04-92c1-4804-aab6-6fcfb410ad2c
// value: The time-independent potassium current.
// #alpha_X_calculation_eq
// comment: The opening rate of the X gate.
// rdf:#6ef85e73-a236-458b-a884-b9048c08a25c
// value: The time-dependent potassium current has an X^2 dependence on it's activation gate, and an Xi inactivation gate. This channel is also assumed permeable to sodium ions.
// rdf:#68023ec0-d242-4459-80e7-845fb91c4dca
// value: The voltage-dependent slow inactivation gate for the fast sodium current - the j gate.
// #alpha_j_calculation_eq
// comment: The opening rate of the j gate.
// #calcium_internal_diff_eq
// comment: The kinetics of the calcium ion concentration changes in the various compartments of the model.
// rdf:#683e3709-a3fe-4eb9-95e4-bb3566e9f6f1
// value: The kinetics of the state transitions in mode Ca. Calcium binding to the Ca channel induces a conformational change from normal mode to mode Ca. This effectively inhibits the conduction of calcium ions because in mode Ca, the calcium channel makes the transition to the open, conducting state (O) extremely slowly.
// #E_Na_calculation_eq
// comment: The sodium reversal potential.
// #VnsCa_calculation_eq
// comment: The potential offset for the channel.
// #IStim_for_cmiss_eq
// comment: This is a dummy equation that we simply use to make grabbing the value in CMISS much easier.
// #i_p_Ca_calculation_eq
// comment: The calcium pump current.
// rdf:#0f1ed0e4-6d3c-4b56-98fd-fc7c0d93e2e4
// value: The closing rate of the m gate.
// #i_Ca_L_Ca_calculation_eq
// comment: Calculation of the calcium current component of the total channel current, given as the maximal current multiplied by the voltage-dependent inactivation gate and the open probability of the channel based on the mode-switching model.
// #fast_sodium_current_m_gate
// comment: The voltage-dependent activation gate for the fast sodium current - the m gate.
// rdf:#b2d117d3-c431-4efc-956c-62608568025c
// value: The rate of change of intracellular potassium ion concentration.
// rdf:#e10d779d-5ea9-4866-a2a8-42119c7918e5
// value: The sodium background current is a time-independent diffusion of Na ions down their electrochemical gradient, through the cell surface membrane into the cytosol.
// #dm_dt_eq
// comment: The kinetics of the m gate.
// rdf:#19e507f5-2e34-4938-ba36-ab0660d9a60f
// value: The rate of change of extracellular potassium ion concentration.
// rdf:#033e0120-32a3-460a-b3ed-e608fc10acb9
// value: Calculation of the time-dependent potassium current.
// rdf:#5fefa518-4317-4642-9cb0-70a5c95a481e
// value: The maximal potassium component current.
// #L_type_Ca_channel
// comment: The JWR model creates a new mathematical model to describe the L-type calcium channel that is based on the experimentally observed mode-switching behaviour of the channel. Inactivation occurs as calcium ion binding induces the channel to switch (from mode normal) to a mode in which transitions to open states are extremely slow (mode Ca). The channel has one voltage inactivation gate, y. As well as Ca, the channel is assumed permeable to K ions also.
// #beta_K1_calculation_eq
// comment: The closing rate of the K1 gate.
// rdf:#4b84685c-44dc-44c7-b908-38e08c75f7af
// value: Calculation of the plateau potassium current.
// rdf:#835c7777-1095-4391-89ed-42f400cea57d
// value: The maximal sodium component current.
// rdf:#4e609ca2-bc3f-4ed6-9eb3-4bf9e2cdc962
// value: Calculation of the Na/Ca exchanger current.
// rdf:#5367cdd4-0e34-41d4-82c4-8e8d261ed246
// value: The main component of the model which defines the action potential.
// #dj_dt_eq
// comment: The kinetics of the j gate.
// #y_diff_eq
// comment: The kinetics of the y gate.
// rdf:#e24c338d-ca40-48a7-b588-19037f4fc73a
// value: Calculation of the fast sodium current using the three Hodkin-Huxley type voltage-dependent gating variables m, h, and j.
// rdf:#2a82804c-14ac-4488-96b4-897538ff88fd
// value: The sarcolemmal calcium pump is an additional mechanism for removing Ca ions from the myoplasm to help maintain a low intracellular calcium concentration when at rest.
// rdf:#243419e0-6d85-4733-9b4c-f8546f83b7a4
// value: Calculation of the potassium current component of the total channel current.
// rdf:#ff4606f2-8637-46ad-b862-69e0b88de05e
// value: The closing rate of the X gate.
// #V_SS_calculation_eq
// comment: Calculate some volume fractions as proportions of the total myoplasmic volume.
// #calcium_background_current
// comment: The calcium background current describes a time-independent diffusion of Ca ions down their electrochemical gradient through the cell surface membrane into the cytosol. However, calcium is not allowed to accumulate to high intracellular concentrations. This influx is balanced by the Ca ion extrusion through the Na-Ca exchanger and the sarcolemmal Ca pump.
// #g_K_calculation_eq
// comment: Calculation of the maximal channel conductance, dependent on extracellular potassium concentration.
// rdf:#1775b7a7-7ada-46ea-a2ba-390a0ee912be
// value: The nonspecific calcium activated current describes a channel which is activated by calcium ions, but is permeable to only sodium and potassium ions.
// rdf:#77d0a8bd-bbdb-48de-81e8-c3711fe2cf16
// value: Rate constant for switching between mode normal and mode Ca.
// #Bi_calculation_eq
// comment: Calcium is buffered by calmodulin (CMDN) in the subspace and myoplasm, and by calsequestrin (CSQN) in the JSR. These are fast buffers and their effect is modelled using the rapid buffering approximation.
// #i_ns_K_calculation_eq
// comment: The potassium component of the channel's current.
// rdf:#02790508-bb45-42b1-b6da-39202a32797c
// value: Calculation of the background calcium current.
// #P_C1_diff_eq
// comment: The kinetic equations governing the transitions between the four states used to model the RyR's.
// #sodium_potassium_pump
// comment: The sodium potassium pump is an active protein in the cell membrane which couples the free energy released by the hydrolysis of ATP to the movement of Na and K ions against their electrochemical gradients through the cell membrane.
// rdf:#5580b920-d04c-4598-bfc0-4503e68356d0
// value: The kinetics of the X gate.
// rdf:#0d6f844f-69d8-4d90-b8d7-ad63b27dd018
// value: The opening rate of the m gate.
// #alpha_a_calculation_eq
// comment: Rate constants for state changes in mode Ca (corresponding to alpha-prime and beta-prime in the JRW paper).
// rdf:#13ebb9eb-5ba8-4942-99b3-cbe891cb9d52
// value: Xi is the inward rectification parameter and is given by the following equation.
// rdf:#5d6c233b-69dc-4344-922f-95ad5138ca76
// value: The maximal calcium current through the channel.
// #E_K_calculation_eq
// comment: The reversal potential of the channel.
// rdf:#60792332-37ac-45fd-aa50-b8c1a538327d
// value: The reversal potential of the channel.
// #Kp_calculation_eq
// comment: The activation variable.
