// This CellML file was generated on 10/07/2009 at 10:18:19 at a.m. using:
//
// COR (0.9.31.1207)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// creator: Family Lim; Given Jeelean; jlim063@aucklanduni.ac.nz; Orgname The University of Auckland; Orgunit The Auckland Bioengineering Institute
// created: W3CDTF 2001-09-10
// title: The Brightman, Fell Model of Differential Feedback Regulation of the MAPK Cascade Underlying the Quantitative Differences in EGF and NGF Signalling in PC12 Cells
// comment: This is the CellML description of Brightman and Fell's model of differential feedback regulation of the MAPK cascade underlying the quantitative differences in EGF and NGF signalling in PC12 cells; FN Jeelean Lim
// reference: subject_type keyword; Epidermal Growth Factor; Mitogen-activated protein kinase; Signal Transduction
// reference: Pubmed_id 11024454; Family Brightman; Given F; Other A; Family Fell; Given D; Other A; title Differential feedback regulation of the MAPK cascade underlies the quantitative differences in EGF and NGF signalling in PC12 cells.; W3CDTF 2000-10; title Federation of European Biochemical Societies Letters; volume 482; first_page 169; last_page 174
def model brightman_fell_2000 as
  // Differential Feedback Regulation of the MAPK Cascade Underlies the Quantitative Differences in EGF and NGF Signalling in PC12 Cells
  //
  // Jeelean Lim
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the initial translation of the model into CellML. Concentrations have no dimensions in order to balance units. The percentage activation variables used to produce the graphs in the paper have not yet been added to this model. The model can therefore run in Opencell and COR but does not reproduce the figures in the paper.
  //
  // Model Structure
  //
  // ABSTRACT: Although epidermal growth factor (EGF) induces transient activation of Ras and the mitogen-activated protein kinase (MAPK) cascade in PC12 cells, whereas nerve growth factor (NGF) stimulates sustained activation, the basis for these contrasting responses is not known. We have developed a computer simulation of EGF-induced MAPK cascade activation, which provides quantitative evidence that feedback inhibition of the MAPK cascade is the most important factor in determining the duration of cascade activation. Hence, we propose that the observed quantitative differences in EGF and NGF signalling can be accounted for by differential feedback regulation of the MAPK cascade.
  //
  // The complete original paper reference is cited below:
  //
  // Differential feedback regulation of the MAPK cascade underlies the quantitative differences in EGF and NGF signalling in PC12 cells, Frances A. Brightman, David A. Fell, 2000,Federation of European Biochemical Societies Letters, 482(3), 169-174. PubMed ID: 11024454 (http://www.ncbi.nlm.nih.gov/pubmed/11024454)
  //
  // reaction diagram
  //
  // Schematic representation of the computer simulation of EGF signal transduction.
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp Rs as
    var Rs: dimensionless {init: 11100, pub: out};
    var v1: first_order_rate_constant {pub: in};
    var v3: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Rs, time) = v3-v1;
  enddef;

  def comp RL as
    var RL: dimensionless {init: 0, pub: out};
    var v1: first_order_rate_constant {pub: in};
    var v2: first_order_rate_constant {pub: in};
    var v4: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(RL, time) = v1-v2-v4;
  enddef;

  def comp Ri as
    var Ri: dimensionless {init: 3900, pub: out};
    var v2: first_order_rate_constant {pub: in};
    var v3: first_order_rate_constant {pub: in};
    var v6: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Ri, time) = v2+v3+v6;
  enddef;

  def comp L as
    var L: dimensionless {init: 0.0000001, pub: out};
    var v1: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(L, time) = -v1;
  enddef;

  def comp R2L2 as
    var R2L2: dimensionless {init: 0, pub: out};
    var v4: first_order_rate_constant {pub: in};
    var v5: first_order_rate_constant {pub: in};
    var v7: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(R2L2, time) = v4-v5-v7;
  enddef;

  def comp R2_CPP as
    var R2_CPP: dimensionless {init: 0, pub: out};
    var v7: first_order_rate_constant {pub: in};
    var v8: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(R2_CPP, time) = v7-v8;
  enddef;

  def comp Li as
    var Li: dimensionless {init: 0, pub: out};
    var v2: first_order_rate_constant {pub: in};
    var v6: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Li, time) = v2+v6;
  enddef;

  def comp R2i as
    var R2i: dimensionless {init: 0, pub: out};
    var v5: first_order_rate_constant {pub: in};
    var v6: first_order_rate_constant {pub: in};
    var v8: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(R2i, time) = v5+v8-v6;
  enddef;

  def comp Shc as
    var Shc: dimensionless {init: 30000, pub: out};
    var v9: first_order_rate_constant {pub: in};
    var v10: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Shc, time) = v10-v9;
  enddef;

  def comp ShcP as
    var ShcP: dimensionless {init: 0, pub: out};
    var v10: first_order_rate_constant {pub: in};
    var v11: first_order_rate_constant {pub: in};
    var v27: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(ShcP, time) = v27-v10-v11;
  enddef;

  def comp ShcGS as
    var ShcGS: dimensionless {init: 0, pub: out};
    var v13: first_order_rate_constant {pub: in};
    var v11: first_order_rate_constant {pub: in};
    var v27: first_order_rate_constant {pub: in};
    var v12: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(ShcGS, time) = v13+v11-v27-v12;
  enddef;

  def comp GS as
    var GS: dimensionless {init: 20000, pub: out};
    var v28: first_order_rate_constant {pub: in};
    var v11: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(GS, time) = v28-v11;
  enddef;

  def comp GSP as
    var GSP: dimensionless {init: 0, pub: out};
    var v27: first_order_rate_constant {pub: in};
    var v28: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(GSP, time) = v27-v28;
  enddef;

  def comp RasGDP as
    var RasGDP: dimensionless {init: 19800, pub: out};
    var v15: first_order_rate_constant {pub: in};
    var v12: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(RasGDP, time) = v15-v12;
  enddef;

  def comp Ras_ShcGS as
    var Ras_ShcGS: dimensionless {init: 0, pub: out};
    var v12: first_order_rate_constant {pub: in};
    var v13: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Ras_ShcGS, time) = v12-v13;
  enddef;

  def comp RasGTP as
    var RasGTP: dimensionless {init: 200, pub: out};
    var RasGDP: dimensionless {pub: in};
    var v13: first_order_rate_constant {pub: in};
    var v17: first_order_rate_constant {pub: in};
    var v14: first_order_rate_constant {pub: in};
    var v16: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(RasGTP, time) = v13+v17-v14-v16;
  enddef;

  def comp GAP as
    var GAP: dimensionless {init: 15000, pub: out};
    var v15: first_order_rate_constant {pub: in};
    var v14: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(GAP, time) = v15-v14;
  enddef;

  def comp Ras_GAP as
    var Ras_GAP: dimensionless {init: 0, pub: out};
    var v14: first_order_rate_constant {pub: in};
    var v15: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Ras_GAP, time) = v14-v15;
  enddef;

  def comp Raf as
    var Raf: dimensionless {init: 10000, pub: out};
    var v18: first_order_rate_constant {pub: in};
    var v16: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Raf, time) = v18-v16;
  enddef;

  def comp Ras_Raf as
    var Ras_Raf: dimensionless {init: 0, pub: out};
    var v16: first_order_rate_constant {pub: in};
    var v17: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Ras_Raf, time) = v16-v17;
  enddef;

  def comp Rafa as
    var Rafa: dimensionless {init: 0, pub: out};
    var v17: first_order_rate_constant {pub: in};
    var v18: first_order_rate_constant {pub: in};
    var v19: first_order_rate_constant {pub: in};
    var v21: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Rafa, time) = v17-v19-v21-v18;
  enddef;

  def comp MEK as
    var MEK: dimensionless {init: 360000, pub: out};
    var v20: first_order_rate_constant {pub: in};
    var v19: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(MEK, time) = v20-v19;
  enddef;

  def comp MEKP as
    var MEKP: dimensionless {init: 0, pub: out};
    var v19: first_order_rate_constant {pub: in};
    var v20: first_order_rate_constant {pub: in};
    var v21: first_order_rate_constant {pub: in};
    var v22: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(MEKP, time) = v19+v22-v20-v21;
  enddef;

  def comp MEKPP as
    var MEKPP: dimensionless {init: 0, pub: out};
    var v21: first_order_rate_constant {pub: in};
    var v22: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(MEKPP, time) = v21-v22;
  enddef;

  def comp ERK as
    var ERK: dimensionless {init: 750000, pub: out};
    var v24: first_order_rate_constant {pub: in};
    var v23: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(ERK, time) = v24-v23;
  enddef;

  def comp ERKP as
    var ERKP: dimensionless {init: 0, pub: out};
    var v23: first_order_rate_constant {pub: in};
    var v26: first_order_rate_constant {pub: in};
    var v24: first_order_rate_constant {pub: in};
    var v25: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(ERKP, time) = v23+v26-v24-v25;
  enddef;

  def comp ERKPP as
    var ERKPP: dimensionless {init: 0, pub: out};
    var v25: first_order_rate_constant {pub: in};
    var v26: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(ERKPP, time) = v25-v26;
  enddef;

  def comp t as
    var t: dimensionless {init: 0, pub: out};
    var v29: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(t, time) = v29;
  enddef;

  def comp X as
    var X: dimensionless {init: 0, pub: out};
    var v30: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(X, time) = v30;
  enddef;

  def comp v1 as
    var v1: first_order_rate_constant {pub: out};
    var Rs: dimensionless {pub: in};
    var L: dimensionless {pub: in};
    var RL: dimensionless {pub: in};
    var k1: first_order_rate_constant {init: 384210000};
    var kn1: first_order_rate_constant {init: 0.73};
    v1 = k1*Rs*L-kn1*RL;
  enddef;

  def comp v2 as
    var v2: first_order_rate_constant {pub: out};
    var RL: dimensionless {pub: in};
    var t: dimensionless {pub: in};
    var DT: dimensionless {init: 6.5};
    var E: dimensionless {init: 0.12};
    var k2: first_order_rate_constant {init: 0.7};
    var f: dimensionless {init: 0.2};
    v2 = f*k2*(E+(1{dimensionless}-E)*(1{dimensionless}-exp(-pow(t/DT, 3{dimensionless}))))*RL;
  enddef;

  def comp v3 as
    var v3: first_order_rate_constant {pub: out};
    var Rs: dimensionless {pub: in};
    var Ri: dimensionless {pub: in};
    var t: dimensionless {pub: in};
    var DT: dimensionless {init: 6.5};
    var E: dimensionless {init: 0.12};
    var kn3: first_order_rate_constant {init: 0.7};
    var f: dimensionless {init: 0.2};
    var k3: first_order_rate_constant {init: 0.0484};
    v3 = k3*Ri-f*kn3*(E+(1{dimensionless}-E)*(1{dimensionless}-exp(-pow(t/DT, 3{dimensionless}))))*Rs;
  enddef;

  def comp v4 as
    var v4: first_order_rate_constant {pub: out};
    var RL: dimensionless {pub: in};
    var R2L2: dimensionless {pub: in};
    var k2_4: first_order_rate_constant {init: 0.0000001};
    var k4: first_order_rate_constant {init: 0.001383};
    v4 = k4*RL*RL-k2_4*R2L2;
  enddef;

  def comp v5 as
    var v5: first_order_rate_constant {pub: out};
    var R2L2: dimensionless {pub: in};
    var t: dimensionless {pub: in};
    var DT: dimensionless {init: 6.5};
    var E: dimensionless {init: 0.12};
    var k5: first_order_rate_constant {init: 0.35};
    var f: dimensionless {init: 0.2};
    v5 = f*k5*(E+(1{dimensionless}-E)*(1{dimensionless}-exp(-pow(t/DT, 3{dimensionless}))))*R2L2;
  enddef;

  def comp v6 as
    var v6: first_order_rate_constant {pub: out};
    var R2i: dimensionless {pub: in};
    var t: dimensionless {pub: in};
    var DT: dimensionless {init: 6.5};
    var E: dimensionless {init: 0.12};
    var k6: first_order_rate_constant {init: 0.35};
    v6 = k6*(E+(1{dimensionless}-E)*(1{dimensionless}-exp(-pow(t/DT, 3{dimensionless}))))*R2i;
  enddef;

  def comp v7 as
    var v7: first_order_rate_constant {pub: out};
    var R2L2: dimensionless {pub: in};
    var R2_CPP: dimensionless {pub: in};
    var k7: first_order_rate_constant {init: 1};
    var f: dimensionless {init: 0.2};
    var kn7: first_order_rate_constant {init: 0.000347};
    v7 = k7*f*R2L2-kn7*R2_CPP;
  enddef;

  def comp v8 as
    var v8: first_order_rate_constant {pub: out};
    var R2_CPP: dimensionless {pub: in};
    var t: dimensionless {pub: in};
    var DT: dimensionless {init: 6.5};
    var E: dimensionless {init: 0.12};
    var k8: first_order_rate_constant {init: 0.35};
    v8 = k8*(E+(1{dimensionless}-E)*(1{dimensionless}-exp(-pow(t/DT, 3{dimensionless}))))*R2_CPP;
  enddef;

  def comp v9 as
    var v9: first_order_rate_constant {pub: out};
    var R2L2: dimensionless {pub: in};
    var R2i: dimensionless {pub: in};
    var R2_CPP: dimensionless {pub: in};
    var Shc: dimensionless {pub: in};
    var k9: first_order_rate_constant {init: 12};
    var K_9: dimensionless {init: 6000};
    v9 = k9*2{dimensionless}*(R2L2+R2i+R2_CPP)*Shc/(K_9+Shc);
  enddef;

  def comp v10 as
    var v10: first_order_rate_constant {pub: out};
    var ShcP: dimensionless {pub: in};
    var V_10: first_order_rate_constant {init: 300000};
    var K_10: dimensionless {init: 6000};
    v10 = V_10*ShcP/(K_10+ShcP);
  enddef;

  def comp v11 as
    var v11: first_order_rate_constant {pub: out};
    var ShcP: dimensionless {pub: in};
    var GS: dimensionless {pub: in};
    var ShcGS: dimensionless {pub: in};
    var k11: first_order_rate_constant {init: 0.002};
    var kn11: first_order_rate_constant {init: 3.81};
    v11 = k11*ShcP*GS-kn11*ShcGS;
  enddef;

  def comp v12 as
    var v12: first_order_rate_constant {pub: out};
    var RasGDP: dimensionless {pub: in};
    var ShcGS: dimensionless {pub: in};
    var Ras_ShcGS: dimensionless {pub: in};
    var k12: first_order_rate_constant {init: 0.0163};
    var kn12: first_order_rate_constant {init: 10};
    v12 = k12*RasGDP*ShcGS-kn12*Ras_ShcGS;
  enddef;

  def comp v13 as
    var v13: first_order_rate_constant {pub: out};
    var Ras_ShcGS: dimensionless {pub: in};
    var k_13: first_order_rate_constant {init: 15};
    v13 = k_13*Ras_ShcGS;
  enddef;

  def comp v14 as
    var v14: first_order_rate_constant {pub: out};
    var RasGTP: dimensionless {pub: in};
    var GAP: dimensionless {pub: in};
    var Ras_GAP: dimensionless {pub: in};
    var k14: first_order_rate_constant {init: 0.005};
    var kn14: first_order_rate_constant {init: 60};
    v14 = k14*RasGTP*GAP-kn14*Ras_GAP;
  enddef;

  def comp v15 as
    var v15: first_order_rate_constant {pub: out};
    var Ras_GAP: dimensionless {pub: in};
    var k15: first_order_rate_constant {init: 720};
    v15 = k15*Ras_GAP;
  enddef;

  def comp v16 as
    var v16: first_order_rate_constant {pub: out};
    var RasGTP: dimensionless {pub: in};
    var Raf: dimensionless {pub: in};
    var Ras_Raf: dimensionless {pub: in};
    var k16: first_order_rate_constant {init: 0.0012};
    var kn16: first_order_rate_constant {init: 3};
    v16 = k16*RasGTP*Raf-kn16*Ras_Raf;
  enddef;

  def comp v17 as
    var v17: first_order_rate_constant {pub: out};
    var Ras_Raf: dimensionless {pub: in};
    var k17: first_order_rate_constant {init: 27};
    v17 = k17*Ras_Raf;
  enddef;

  def comp v18 as
    var v18: first_order_rate_constant {pub: out};
    var Rafa: dimensionless {pub: in};
    var V_18: first_order_rate_constant {init: 97000};
    var K_18: dimensionless {init: 6000};
    v18 = V_18*Rafa/(K_18+Rafa);
  enddef;

  def comp v19 as
    var v19: first_order_rate_constant {pub: out};
    var Rafa: dimensionless {pub: in};
    var MEK: dimensionless {pub: in};
    var k19: first_order_rate_constant {init: 50};
    var K_19: dimensionless {init: 9000};
    v19 = Rafa*MEK*k19/(K_19+MEK);
  enddef;

  def comp v20 as
    var v20: first_order_rate_constant {pub: out};
    var MEKP: dimensionless {pub: in};
    var V_20: first_order_rate_constant {init: 920000};
    var K_20: dimensionless {init: 600000};
    v20 = V_20*MEKP/(K_20+MEKP);
  enddef;

  def comp v21 as
    var v21: first_order_rate_constant {pub: out};
    var Rafa: dimensionless {pub: in};
    var MEKP: dimensionless {pub: in};
    var k21: first_order_rate_constant {init: 50};
    var K_21: dimensionless {init: 9000};
    v21 = Rafa*MEKP*k21/(K_21+MEKP);
  enddef;

  def comp v22 as
    var v22: first_order_rate_constant {pub: out};
    var MEKPP: dimensionless {pub: in};
    var V_22: first_order_rate_constant {init: 920000};
    var K_22: dimensionless {init: 600000};
    v22 = V_22*MEKPP/(K_22+MEKPP);
  enddef;

  def comp v23 as
    var v23: first_order_rate_constant {pub: out};
    var ERK: dimensionless {pub: in};
    var MEKP: dimensionless {pub: in};
    var MEKPP: dimensionless {pub: in};
    var k23: first_order_rate_constant {init: 8.3};
    var K_23: dimensionless {init: 90000};
    v23 = k23*ERK*(MEKP+MEKPP)/(K_23+ERK);
  enddef;

  def comp v24 as
    var v24: first_order_rate_constant {pub: out};
    var ERKP: dimensionless {pub: in};
    var V_24: first_order_rate_constant {init: 200000};
    var K_24: dimensionless {init: 600000};
    v24 = V_24*ERKP/(K_24+ERKP);
  enddef;

  def comp v25 as
    var v25: first_order_rate_constant {pub: out};
    var ERKP: dimensionless {pub: in};
    var MEKP: dimensionless {pub: in};
    var MEKPP: dimensionless {pub: in};
    var k25: first_order_rate_constant {init: 8.3};
    var K_25: dimensionless {init: 90000};
    v25 = k25*ERKP*(MEKP+MEKPP)/(K_25+ERKP);
  enddef;

  def comp v26 as
    var v26: first_order_rate_constant {pub: out};
    var ERKPP: dimensionless {pub: in};
    var V_26: first_order_rate_constant {init: 400000};
    var K_26: dimensionless {init: 600000};
    v26 = V_26*ERKPP/(K_26+ERKPP);
  enddef;

  def comp v27 as
    var v27: first_order_rate_constant {pub: out};
    var ERKPP: dimensionless {pub: in};
    var ShcGS: dimensionless {pub: in};
    var k27: first_order_rate_constant {init: 1.6};
    var K_27: dimensionless {init: 600000};
    v27 = ERKPP*ShcGS*k27/(K_27+ShcGS);
  enddef;

  def comp v28 as
    var v28: first_order_rate_constant {pub: out};
    var GSP: dimensionless {pub: in};
    var V_28: first_order_rate_constant {init: 75};
    var K_28: dimensionless {init: 20000};
    v28 = V_28*GSP/(K_28+GSP);
  enddef;

  def comp v29 as
    var v29: first_order_rate_constant {pub: out};
    var v_1: first_order_rate_constant {init: 1};
    v29 = v_1;
  enddef;

  def comp v30 as
    var v30: first_order_rate_constant {pub: out};
    var t: dimensionless {pub: in};
    var k_11: first_order_rate_constant {init: 0};
    v30 = k_11*t;
  enddef;
  def map between Rs and environment for
    vars time and time;
  enddef;
  def map between RL and environment for
    vars time and time;
  enddef;
  def map between Ri and environment for
    vars time and time;
  enddef;
  def map between L and environment for
    vars time and time;
  enddef;
  def map between R2L2 and environment for
    vars time and time;
  enddef;
  def map between R2_CPP and environment for
    vars time and time;
  enddef;
  def map between Li and environment for
    vars time and time;
  enddef;
  def map between R2i and environment for
    vars time and time;
  enddef;
  def map between Shc and environment for
    vars time and time;
  enddef;
  def map between ShcP and environment for
    vars time and time;
  enddef;
  def map between ShcGS and environment for
    vars time and time;
  enddef;
  def map between GS and environment for
    vars time and time;
  enddef;
  def map between GSP and environment for
    vars time and time;
  enddef;
  def map between RasGDP and environment for
    vars time and time;
  enddef;
  def map between Ras_ShcGS and environment for
    vars time and time;
  enddef;
  def map between RasGTP and environment for
    vars time and time;
  enddef;
  def map between GAP and environment for
    vars time and time;
  enddef;
  def map between Ras_GAP and environment for
    vars time and time;
  enddef;
  def map between Raf and environment for
    vars time and time;
  enddef;
  def map between Ras_Raf and environment for
    vars time and time;
  enddef;
  def map between Rafa and environment for
    vars time and time;
  enddef;
  def map between MEK and environment for
    vars time and time;
  enddef;
  def map between MEKP and environment for
    vars time and time;
  enddef;
  def map between MEKPP and environment for
    vars time and time;
  enddef;
  def map between ERK and environment for
    vars time and time;
  enddef;
  def map between ERKP and environment for
    vars time and time;
  enddef;
  def map between ERKPP and environment for
    vars time and time;
  enddef;
  def map between t and environment for
    vars time and time;
  enddef;
  def map between X and environment for
    vars time and time;
  enddef;
  def map between Rs and v1 for
    vars Rs and Rs;
    vars v1 and v1;
  enddef;
  def map between Rs and v3 for
    vars Rs and Rs;
    vars v3 and v3;
  enddef;
  def map between RL and v1 for
    vars RL and RL;
    vars v1 and v1;
  enddef;
  def map between RL and v2 for
    vars RL and RL;
    vars v2 and v2;
  enddef;
  def map between RL and v4 for
    vars RL and RL;
    vars v4 and v4;
  enddef;
  def map between Ri and v2 for
    vars v2 and v2;
  enddef;
  def map between Ri and v3 for
    vars v3 and v3;
    vars Ri and Ri;
  enddef;
  def map between Ri and v6 for
    vars v6 and v6;
  enddef;
  def map between L and v1 for
    vars L and L;
    vars v1 and v1;
  enddef;
  def map between R2L2 and v4 for
    vars R2L2 and R2L2;
    vars v4 and v4;
  enddef;
  def map between R2L2 and v5 for
    vars R2L2 and R2L2;
    vars v5 and v5;
  enddef;
  def map between R2L2 and v7 for
    vars R2L2 and R2L2;
    vars v7 and v7;
  enddef;
  def map between R2L2 and v9 for
    vars R2L2 and R2L2;
  enddef;
  def map between R2_CPP and v7 for
    vars R2_CPP and R2_CPP;
    vars v7 and v7;
  enddef;
  def map between R2_CPP and v8 for
    vars R2_CPP and R2_CPP;
    vars v8 and v8;
  enddef;
  def map between R2_CPP and v9 for
    vars R2_CPP and R2_CPP;
  enddef;
  def map between Li and v2 for
    vars v2 and v2;
  enddef;
  def map between Li and v6 for
    vars v6 and v6;
  enddef;
  def map between R2i and v5 for
    vars v5 and v5;
  enddef;
  def map between R2i and v6 for
    vars R2i and R2i;
    vars v6 and v6;
  enddef;
  def map between R2i and v8 for
    vars v8 and v8;
  enddef;
  def map between R2i and v9 for
    vars R2i and R2i;
  enddef;
  def map between Shc and v9 for
    vars Shc and Shc;
    vars v9 and v9;
  enddef;
  def map between Shc and v10 for
    vars v10 and v10;
  enddef;
  def map between ShcP and v10 for
    vars ShcP and ShcP;
    vars v10 and v10;
  enddef;
  def map between ShcP and v11 for
    vars ShcP and ShcP;
    vars v11 and v11;
  enddef;
  def map between ShcP and v27 for
    vars v27 and v27;
  enddef;
  def map between ShcGS and v11 for
    vars ShcGS and ShcGS;
    vars v11 and v11;
  enddef;
  def map between ShcGS and v13 for
    vars v13 and v13;
  enddef;
  def map between ShcGS and v27 for
    vars ShcGS and ShcGS;
    vars v27 and v27;
  enddef;
  def map between ShcGS and v12 for
    vars ShcGS and ShcGS;
    vars v12 and v12;
  enddef;
  def map between GS and v28 for
    vars v28 and v28;
  enddef;
  def map between GS and v11 for
    vars GS and GS;
    vars v11 and v11;
  enddef;
  def map between GSP and v27 for
    vars v27 and v27;
  enddef;
  def map between GSP and v28 for
    vars GSP and GSP;
    vars v28 and v28;
  enddef;
  def map between RasGDP and v15 for
    vars v15 and v15;
  enddef;
  def map between RasGDP and v12 for
    vars RasGDP and RasGDP;
    vars v12 and v12;
  enddef;
  def map between Ras_ShcGS and v12 for
    vars Ras_ShcGS and Ras_ShcGS;
    vars v12 and v12;
  enddef;
  def map between Ras_ShcGS and v13 for
    vars Ras_ShcGS and Ras_ShcGS;
    vars v13 and v13;
  enddef;
  def map between RasGTP and RasGDP for
    vars RasGDP and RasGDP;
  enddef;
  def map between RasGTP and v13 for
    vars v13 and v13;
  enddef;
  def map between RasGTP and v17 for
    vars v17 and v17;
  enddef;
  def map between RasGTP and v14 for
    vars RasGTP and RasGTP;
    vars v14 and v14;
  enddef;
  def map between RasGTP and v16 for
    vars RasGTP and RasGTP;
    vars v16 and v16;
  enddef;
  def map between GAP and v15 for
    vars v15 and v15;
  enddef;
  def map between GAP and v14 for
    vars GAP and GAP;
    vars v14 and v14;
  enddef;
  def map between Ras_GAP and v14 for
    vars Ras_GAP and Ras_GAP;
    vars v14 and v14;
  enddef;
  def map between Ras_GAP and v15 for
    vars Ras_GAP and Ras_GAP;
    vars v15 and v15;
  enddef;
  def map between Raf and v18 for
    vars v18 and v18;
  enddef;
  def map between Raf and v16 for
    vars Raf and Raf;
    vars v16 and v16;
  enddef;
  def map between Ras_Raf and v16 for
    vars Ras_Raf and Ras_Raf;
    vars v16 and v16;
  enddef;
  def map between Ras_Raf and v17 for
    vars Ras_Raf and Ras_Raf;
    vars v17 and v17;
  enddef;
  def map between Rafa and v18 for
    vars Rafa and Rafa;
    vars v18 and v18;
  enddef;
  def map between Rafa and v19 for
    vars Rafa and Rafa;
    vars v19 and v19;
  enddef;
  def map between Rafa and v21 for
    vars Rafa and Rafa;
    vars v21 and v21;
  enddef;
  def map between Rafa and v17 for
    vars v17 and v17;
  enddef;
  def map between MEK and v20 for
    vars v20 and v20;
  enddef;
  def map between MEK and v19 for
    vars v19 and v19;
    vars MEK and MEK;
  enddef;
  def map between MEKP and v19 for
    vars v19 and v19;
  enddef;
  def map between MEKP and v20 for
    vars v20 and v20;
    vars MEKP and MEKP;
  enddef;
  def map between MEKP and v21 for
    vars MEKP and MEKP;
    vars v21 and v21;
  enddef;
  def map between MEKP and v22 for
    vars v22 and v22;
  enddef;
  def map between MEKP and v23 for
    vars MEKP and MEKP;
  enddef;
  def map between MEKP and v25 for
    vars MEKP and MEKP;
  enddef;
  def map between MEKPP and v21 for
    vars v21 and v21;
  enddef;
  def map between MEKPP and v22 for
    vars MEKPP and MEKPP;
    vars v22 and v22;
  enddef;
  def map between MEKPP and v23 for
    vars MEKPP and MEKPP;
  enddef;
  def map between MEKPP and v25 for
    vars MEKPP and MEKPP;
  enddef;
  def map between ERK and v24 for
    vars v24 and v24;
  enddef;
  def map between ERK and v23 for
    vars ERK and ERK;
    vars v23 and v23;
  enddef;
  def map between ERKP and v23 for
    vars v23 and v23;
  enddef;
  def map between ERKP and v26 for
    vars v26 and v26;
  enddef;
  def map between ERKP and v24 for
    vars ERKP and ERKP;
    vars v24 and v24;
  enddef;
  def map between ERKP and v25 for
    vars ERKP and ERKP;
    vars v25 and v25;
  enddef;
  def map between ERKPP and v25 for
    vars v25 and v25;
  enddef;
  def map between ERKPP and v26 for
    vars ERKPP and ERKPP;
    vars v26 and v26;
  enddef;
  def map between ERKPP and v27 for
    vars ERKPP and ERKPP;
  enddef;
  def map between t and v29 for
    vars v29 and v29;
  enddef;
  def map between t and v2 for
    vars t and t;
  enddef;
  def map between t and v3 for
    vars t and t;
  enddef;
  def map between t and v5 for
    vars t and t;
  enddef;
  def map between t and v6 for
    vars t and t;
  enddef;
  def map between t and v8 for
    vars t and t;
  enddef;
  def map between t and v30 for
    vars t and t;
  enddef;
  def map between X and v30 for
    vars v30 and v30;
  enddef;
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "brightman_fell_2000", which is
  // declared on the <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  // Keyword(s)
  //
  // The CellML Metadata Specification recommends that bibliographic metadata
  // is used to provide information about the original model reference.  The
  // "identifier" attribute on the "BibliographicReference" class provides an
  // elegant way to identify a cited reference using a database identifier            such as Pubmed.  All associated data such as author, journal title,
  // date, etc can be looked up on the database.
enddef;
