// This CellML file was generated on 04/06/2013 at 16:18:13 using:
//
// COR (0.9.31.1409)
// Copyright 2002-2013 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Severi; Given Stefano; Orgname University of Bologna; Orgunit Biomedical Engineering Laboratory - DEIS
// created: W3CDTF 2012
// title: Computational models of ventricular- and atrial-like human induced pluripotent stem cell derived cardiomyocytes
// reference: subject_type keyword; electrophysiology; cardiac
// reference: Pubmed_id 23722932; Family Paci; Given S; Family Hyttinen; Given M; Family Aalto-Setala; Given L A; Family Severi; Given D; title Computational models of ventricular- and atrial-like human induced pluripotent stem cell derived cardiomyocytes; title Annals of biomedical engineering.; volume Epub ahead of print; first_page Epub ahead of print; last_page Epub ahead of print; subject_type keyword; electrophysiology
def model paci_hyttinen_aaltosetala_severi_ventricularVersion as
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_volt as
    unit volt {expo: -1};
  enddef;
  def unit millivolt_per_volt as
    unit millivolt;
    unit volt {expo: -1};
  enddef;
  def unit volt_square as
    unit volt {expo: 2};
  enddef;
  def unit millivolt_square as
    unit volt {pref: milli, expo: 2};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre_cube as
    unit micrometre {expo: 3};
  enddef;
  def unit metre_cube as
    unit metre {expo: 3};
  enddef;
  def unit metre3_per_um3 as
    unit metre_cube;
    unit micrometre_cube {expo: -1};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit metre_cube_per_F_per_s as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp Membrane as
    var Vm: volt {init: -0.0743340057623841, pub: out};
    var time: second {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_f: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_to: A_per_F {pub: in};
    var i_PCa: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_stim: A_per_F {pub: in};
    ode(Vm, time) = -(i_K1+i_to+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_NaCa+i_PCa+i_f+i_b_Na+i_b_Ca-i_stim);
  enddef;

  def comp stim_mode as
    var time: second {pub: in};
    var Cm: farad {pub: in};
    var stim_flag: dimensionless {init: 0};
    var i_stim: A_per_F {pub: out};
    var i_stim_Start: second {init: 0};
    var i_stim_End: second {init: 800};
    var i_stim_Amplitude: ampere {init: 5.5e-10};
    var i_stim_frequency: per_second {init: 60};
    var i_stim_Period: second;
    var i_stim_PulseDuration: second {init: 0.005};
    i_stim_Period = 60{dimensionless}/i_stim_frequency;
    i_stim = sel
      case (time >= i_stim_Start) and ((time <= i_stim_End) and (time-i_stim_Start-floor((time-i_stim_Start)/i_stim_Period)*i_stim_Period <= i_stim_PulseDuration)):
        stim_flag*i_stim_Amplitude/Cm;
      otherwise:
        0{A_per_F};
    endsel;
  enddef;

  def comp current_blockers as
    var TTX_3uM: dimensionless {init: 0, pub: out};
    var TTX_10uM: dimensionless {init: 0, pub: out};
    var TTX_30uM: dimensionless {init: 0, pub: out};
    var E4031_30nM: dimensionless {init: 0, pub: out};
    var E4031_100nM: dimensionless {init: 0, pub: out};
    var nifed_3nM: dimensionless {init: 0, pub: out};
    var nifed_10nM: dimensionless {init: 0, pub: out};
    var nifed_30nM: dimensionless {init: 0, pub: out};
    var nifed_100nM: dimensionless {init: 0, pub: out};
    var Chromanol_iKs30: dimensionless {init: 0, pub: out};
    var Chromanol_iKs50: dimensionless {init: 0, pub: out};
    var Chromanol_iKs70: dimensionless {init: 0, pub: out};
    var Chromanol_iKs90: dimensionless {init: 0, pub: out};
  enddef;

  def comp electric_potentials as
    var E_Na: volt {pub: out};
    var E_K: volt {pub: out};
    var E_Ks: volt {pub: out};
    var E_Ca: volt {pub: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var PkNa: dimensionless {init: 0.03};
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Ko/Ki);
    E_Ks = R*T/F*ln((Ko+PkNa*Nao)/(Ki+PkNa*Nai));
    E_Ca = 0.5{dimensionless}*(R*T)/F*ln(Cao/Cai);
  enddef;

  def comp i_Na as
    var i_Na: A_per_F {pub: out};
    var g_Na: S_per_F {init: 3671.2302};
    var time: second {pub: in, priv: out};
    var Vm: volt {pub: in, priv: out};
    var E_Na: volt {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    var TTX_3uM: dimensionless {pub: in};
    var TTX_10uM: dimensionless {pub: in};
    var TTX_30uM: dimensionless {pub: in};
    var TTX_coeff: dimensionless;
    TTX_coeff = sel
      case TTX_3uM == 1{dimensionless}:
        0.18{dimensionless};
      case TTX_10uM == 1{dimensionless}:
        0.06{dimensionless};
      case TTX_30uM == 1{dimensionless}:
        0.02{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_Na = TTX_coeff*(g_Na*(pow(m, 3{dimensionless})*(h*(j*(Vm-E_Na)))));
  enddef;

  def comp i_Na_m_gate as
    var m: dimensionless {init: 0.102953468725004, pub: out};
    var m_inf: dimensionless;
    var tau_m: second;
    var alpha_m: dimensionless;
    var beta_m: dimensionless;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    m_inf = 1{dimensionless}/pow(1{dimensionless}+exp((-Vm*1000{millivolt_per_volt}-34.1{millivolt})/5.9{millivolt}), 1{dimensionless}/3{dimensionless});
    alpha_m = 1{dimensionless}/(1{dimensionless}+exp((-Vm*1000{millivolt_per_volt}-60{millivolt})/5{millivolt}));
    beta_m = 0.1{dimensionless}/(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+35{millivolt})/5{millivolt}))+0.1{dimensionless}/(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}-50{millivolt})/200{millivolt}));
    tau_m = 1{second}*(alpha_m*beta_m)/1000{dimensionless};
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp i_Na_h_gate as
    var h: dimensionless {init: 0.786926637881461, pub: out};
    var h_inf: dimensionless;
    var alpha_h: dimensionless;
    var beta_h: dimensionless;
    var tau_h: second;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    h_inf = 1{dimensionless}/sqrt(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+72.1{millivolt})/5.7{millivolt}));
    alpha_h = sel
      case Vm < -0.04{volt}:
        0.057{dimensionless}*exp(-(Vm*1000{millivolt_per_volt}+80{millivolt})/6.8{millivolt});
      otherwise:
        0{dimensionless};
    endsel;
    beta_h = sel
      case Vm < -0.04{volt}:
        2.7{dimensionless}*exp(0.079{per_millivolt}*(Vm*1000{millivolt_per_volt}))+3.1{dimensionless}*(pow(10{dimensionless}, 5{dimensionless})*exp(0.3485{per_millivolt}*(Vm*1000{millivolt_per_volt})));
      otherwise:
        0.77{dimensionless}/(0.13{dimensionless}*(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    tau_h = sel
      case Vm < -0.04{volt}:
        1.5{second}/((alpha_h+beta_h)*1000{dimensionless});
      otherwise:
        2.542{second}/1000{dimensionless};
    endsel;
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp i_Na_j_gate as
    var j: dimensionless {init: 0.253943221774722, pub: out};
    var j_inf: dimensionless;
    var alpha_j: dimensionless;
    var beta_j: dimensionless;
    var tau_j: second;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    j_inf = 1{dimensionless}/sqrt(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+72.1{millivolt})/5.7{millivolt}));
    alpha_j = sel
      case Vm < -0.04{volt}:
        (-25428{per_millivolt}*exp(0.2444{per_millivolt}*(Vm*1000{millivolt_per_volt}))-6.948{per_millivolt}*(pow(10{dimensionless}, -6{dimensionless})*exp(-0.04391{per_millivolt}*(Vm*1000{millivolt_per_volt}))))*(Vm*1000{millivolt_per_volt}+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(Vm*1000{millivolt_per_volt}+79.23{millivolt})));
      otherwise:
        0{dimensionless};
    endsel;
    beta_j = sel
      case Vm < -0.04{volt}:
        0.02424{dimensionless}*exp(-0.01052{per_millivolt}*(Vm*1000{millivolt_per_volt}))/(1{dimensionless}+exp(-0.1378{per_millivolt}*(Vm*1000{millivolt_per_volt}+40.14{millivolt})));
      otherwise:
        0.6{dimensionless}*exp(0.057{per_millivolt}*(Vm*1000{millivolt_per_volt}))/(1{dimensionless}+exp(-0.1{per_millivolt}*(Vm*1000{millivolt_per_volt}+32{millivolt})));
    endsel;
    tau_j = 7{second}/((alpha_j+beta_j)*1000{dimensionless});
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp i_CaL as
    var i_CaL: A_per_F {pub: out};
    var g_CaL: metre_cube_per_F_per_s {init: 8.635702e-5};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in, priv: out};
    var Vm: volt {pub: in, priv: out};
    var Cai: millimolar {pub: in, priv: out};
    var Cao: millimolar {pub: in, priv: out};
    var d: dimensionless {pub: out, priv: in};
    var f1: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    var nifed_3nM: dimensionless {pub: in};
    var nifed_10nM: dimensionless {pub: in};
    var nifed_30nM: dimensionless {pub: in};
    var nifed_100nM: dimensionless {pub: in};
    var nifed_coeff: dimensionless;
    nifed_coeff = sel
      case nifed_3nM == 1{dimensionless}:
        0.93{dimensionless};
      case nifed_10nM == 1{dimensionless}:
        0.79{dimensionless};
      case nifed_30nM == 1{dimensionless}:
        0.56{dimensionless};
      case nifed_100nM == 1{dimensionless}:
        0.28{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_CaL = g_CaL*(4{dimensionless}*(Vm*sqr(F)))/(R*T)*(Cai*exp(2{dimensionless}*(Vm*F)/(R*T))-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*(Vm*F)/(R*T))-1{dimensionless})*(d*(f1*(f2*fCa)));
  enddef;

  def comp i_CaL_d_gate as
    var d: dimensionless {init: 8.96088425225182e-5, pub: out};
    var d_infinity: dimensionless;
    var tau_d: second;
    var alpha_d: dimensionless;
    var beta_d: dimensionless;
    var gamma_d: dimensionless;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    var Cai: millimolar {pub: in, priv: out};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm*1000{millivolt_per_volt}+9.1{millivolt})/7{millivolt}));
    alpha_d = 0.25{dimensionless}+1.4{dimensionless}/(1{dimensionless}+exp((-Vm*1000{millivolt_per_volt}-35{millivolt})/13{millivolt}));
    beta_d = 1.4{dimensionless}/(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+5{millivolt})/5{millivolt}));
    gamma_d = 1{dimensionless}/(1{dimensionless}+exp((-Vm*1000{millivolt_per_volt}+50{millivolt})/20{millivolt}));
    tau_d = (alpha_d*beta_d+gamma_d)*1{second}/1000{dimensionless};
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp i_CaL_f1_gate as
    var f1: dimensionless {init: 0.970411811263976, pub: out};
    var f1_inf: dimensionless;
    var tau_f1: second;
    var constf1: dimensionless;
    var Vm: volt {pub: in};
    var Cai: millimolar {pub: in};
    var time: second {pub: in};
    f1_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+26{millivolt})/3{millivolt}));
    tau_f1 = (20{second}+1102.5{second}*exp(-sqr(sqr(Vm*1000{millivolt_per_volt}+27{millivolt})/15{millivolt_square}))+200{second}/(1{dimensionless}+exp((13{millivolt}-Vm*1000{millivolt_per_volt})/10{millivolt}))+180{second}/(1{dimensionless}+exp((30{millivolt}+Vm*1000{millivolt_per_volt})/10{millivolt})))*constf1/1000{dimensionless};
    constf1 = sel
      case f1_inf-f1 > 0{dimensionless}:
        1{dimensionless}+1433{per_millimolar}*(Cai-50{millimolar}*1e-6{dimensionless});
      otherwise:
        1{dimensionless};
    endsel;
    ode(f1, time) = (f1_inf-f1)/tau_f1;
  enddef;

  def comp i_CaL_f2_gate as
    var f2: dimensionless {init: 0.999965815466749, pub: out};
    var f2_inf: dimensionless;
    var tau_f2: second;
    var constf2: dimensionless;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    f2_inf = 0.33{dimensionless}+0.67{dimensionless}/(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+35{millivolt})/4{millivolt}));
    constf2 = 1{dimensionless};
    tau_f2 = (600{second}*exp(-sqr(Vm*1000{millivolt_per_volt}+25{millivolt})/170{millivolt_square})+31{second}/(1{dimensionless}+exp((25{millivolt}-Vm*1000{millivolt_per_volt})/10{millivolt}))+16{second}/(1{dimensionless}+exp((30{millivolt}+Vm*1000{millivolt_per_volt})/10{millivolt})))*constf2/1000{dimensionless};
    ode(f2, time) = (f2_inf-f2)/tau_f2;
  enddef;

  def comp i_CaL_fCa_gate as
    var fCa: dimensionless {init: 0.998925296531804, pub: out};
    var constfCa: dimensionless;
    var alpha_fCa: dimensionless;
    var beta_fCa: dimensionless;
    var gamma_fCa: dimensionless;
    var fCa_inf: dimensionless;
    var tau_fCa: second {init: 0.002};
    var Cai: millimolar {pub: in};
    var Vm: volt {pub: in};
    var time: second {pub: in};
    alpha_fCa = 1{dimensionless}/(1{dimensionless}+pow(Cai/0.0006{millimolar}, 8{dimensionless}));
    beta_fCa = 0.1{dimensionless}/(1{dimensionless}+exp((Cai-0.0009{millimolar})/0.0001{millimolar}));
    gamma_fCa = 0.3{dimensionless}/(1{dimensionless}+exp((Cai-0.00075{millimolar})/0.0008{millimolar}));
    fCa_inf = (alpha_fCa+beta_fCa+gamma_fCa)/1.3156{dimensionless};
    constfCa = sel
      case (Vm > -0.06{volt}) and (fCa_inf > fCa):
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    ode(fCa, time) = constfCa*(fCa_inf-fCa)/tau_fCa;
  enddef;

  def comp i_Kr as
    var i_Kr: A_per_F {pub: out};
    var g_Kr: S_per_F {init: 29.8667};
    var time: second {pub: in, priv: out};
    var Vm: volt {pub: in, priv: out};
    var E_K: volt {pub: in};
    var Ko: millimolar {pub: in};
    var Cao: millimolar {pub: in, priv: out};
    var Xr1: dimensionless {priv: in};
    var Xr2: dimensionless {priv: in};
    var R: joule_per_mole_kelvin {pub: in, priv: out};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_mole {pub: in, priv: out};
    var E4031_30nM: dimensionless {pub: in};
    var E4031_100nM: dimensionless {pub: in};
    var E4031_coeff: dimensionless;
    E4031_coeff = sel
      case E4031_30nM == 1{dimensionless}:
        0.77{dimensionless};
      case E4031_100nM == 1{dimensionless}:
        0.5{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_Kr = E4031_coeff*(g_Kr*((Vm-E_K)*(Xr1*(Xr2*sqrt(Ko/5.4{millimolar})))));
  enddef;

  def comp i_Kr_Xr1_gate as
    var Xr1: dimensionless {init: 0.00778547011240132, pub: out};
    var Xr1_inf: dimensionless;
    var alpha_Xr1: dimensionless;
    var beta_Xr1: dimensionless;
    var tau_Xr1: second;
    var Cao: millimolar {pub: in};
    var L0: dimensionless {init: 0.025};
    var Vm: volt {pub: in};
    var V_half: millivolt;
    var time: second {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Q: dimensionless {init: 2.3};
    V_half = 1000{millivolt_per_volt}*(-R*T/(F*Q)*ln(pow(1{dimensionless}+Cao/2.6{millimolar}, 4{dimensionless})/(L0*pow(1{dimensionless}+Cao/0.58{millimolar}, 4{dimensionless})))-0.019{volt});
    Xr1_inf = 1{dimensionless}/(1{dimensionless}+exp((V_half-Vm*1000{millivolt_per_volt})/4.9{millivolt}));
    alpha_Xr1 = 450{dimensionless}/(1{dimensionless}+exp((-45{millivolt}-Vm*1000{millivolt_per_volt})/10{millivolt}));
    beta_Xr1 = 6{dimensionless}/(1{dimensionless}+exp((30{millivolt}+Vm*1000{millivolt_per_volt})/11.5{millivolt}));
    tau_Xr1 = 1{second}*(alpha_Xr1*beta_Xr1)/1000{dimensionless};
    ode(Xr1, time) = (Xr1_inf-Xr1)/tau_Xr1;
  enddef;

  def comp i_Kr_Xr2_gate as
    var Xr2: dimensionless {init: 0.432162576531617, pub: out};
    var Xr2_infinity: dimensionless;
    var alpha_Xr2: dimensionless;
    var beta_Xr2: dimensionless;
    var tau_Xr2: second;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    Xr2_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+88{millivolt})/50{millivolt}));
    alpha_Xr2 = 3{dimensionless}/(1{dimensionless}+exp((-60{millivolt}-Vm*1000{millivolt_per_volt})/20{millivolt}));
    beta_Xr2 = 1.12{dimensionless}/(1{dimensionless}+exp((-60{millivolt}+Vm*1000{millivolt_per_volt})/20{millivolt}));
    tau_Xr2 = 1{second}*(alpha_Xr2*beta_Xr2)/1000{dimensionless};
    ode(Xr2, time) = (Xr2_infinity-Xr2)/tau_Xr2;
  enddef;

  def comp i_Ks as
    var i_Ks: A_per_F {pub: out};
    var g_Ks: S_per_F {init: 2.041};
    var E_Ks: volt {pub: in};
    var Cai: millimolar {pub: in};
    var time: second {pub: in, priv: out};
    var Vm: volt {pub: in, priv: out};
    var Xs: dimensionless {priv: in};
    var Chromanol_iKs30: dimensionless {pub: in};
    var Chromanol_iKs50: dimensionless {pub: in};
    var Chromanol_iKs70: dimensionless {pub: in};
    var Chromanol_iKs90: dimensionless {pub: in};
    var Chromanol_coeff: dimensionless;
    Chromanol_coeff = sel
      case Chromanol_iKs30 == 1{dimensionless}:
        0.7{dimensionless};
      case Chromanol_iKs50 == 1{dimensionless}:
        0.5{dimensionless};
      case Chromanol_iKs70 == 1{dimensionless}:
        0.3{dimensionless};
      case Chromanol_iKs90 == 1{dimensionless}:
        0.1{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_Ks = Chromanol_coeff*(g_Ks*((Vm-E_Ks)*(sqr(Xs)*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8{millimolar}*0.00001{dimensionless}/Cai, 1.4{dimensionless}))))));
  enddef;

  def comp i_Ks_Xs_gate as
    var Xs: dimensionless {init: 0.0322944866983666, pub: out};
    var Xs_infinity: dimensionless;
    var alpha_Xs: dimensionless;
    var beta_Xs: dimensionless;
    var tau_Xs: second;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    Xs_infinity = 1{dimensionless}/(1{dimensionless}+exp((-Vm*1000{millivolt_per_volt}-20{millivolt})/16{millivolt}));
    alpha_Xs = 1100{dimensionless}/sqrt(1{dimensionless}+exp((-10{millivolt}-Vm*1000{millivolt_per_volt})/6{millivolt}));
    beta_Xs = 1{dimensionless}/(1{dimensionless}+exp((-60{millivolt}+Vm*1000{millivolt_per_volt})/20{millivolt}));
    tau_Xs = 1{second}*(alpha_Xs*beta_Xs)/1000{dimensionless};
    ode(Xs, time) = (Xs_infinity-Xs)/tau_Xs;
  enddef;

  def comp i_K1 as
    var i_K1: A_per_F {pub: out};
    var g_K1: S_per_F {init: 28.1492};
    var XK1_inf: dimensionless;
    var E_K: volt {pub: in};
    var Ko: millimolar {pub: in};
    var time: second {pub: in, priv: out};
    var Vm: volt {pub: in, priv: out};
    var alpha_K1: dimensionless;
    var beta_K1: dimensionless;
    alpha_K1 = 3.91{dimensionless}/(1{dimensionless}+exp(0.5942{per_millivolt}*(Vm*1000{millivolt_per_volt}-E_K*1000{millivolt_per_volt}-200{millivolt})));
    beta_K1 = (-1.509{dimensionless}*exp(0.0002{per_millivolt}*(Vm*1000{millivolt_per_volt}-E_K*1000{millivolt_per_volt}+100{millivolt}))+exp(0.5886{per_millivolt}*(Vm*1000{millivolt_per_volt}-E_K*1000{millivolt_per_volt}-10{millivolt})))/(1{dimensionless}+exp(0.4547{per_millivolt}*(Vm*1000{millivolt_per_volt}-E_K*1000{millivolt_per_volt})));
    XK1_inf = alpha_K1/(alpha_K1+beta_K1);
    i_K1 = g_K1*(XK1_inf*((Vm-E_K)*sqrt(Ko/5.4{millimolar})));
  enddef;

  def comp i_f as
    var i_f: A_per_F {pub: out};
    var g_f: S_per_F {init: 30.10312};
    var time: second {pub: in, priv: out};
    var E_f: volt {init: -0.017};
    var Vm: volt {pub: in, priv: out};
    var Xf: dimensionless {priv: in};
    i_f = g_f*(Xf*(Vm-E_f));
  enddef;

  def comp i_f_Xf_gate as
    var Xf: dimensionless {init: 0.100615100568753, pub: out};
    var Xf_infinity: dimensionless;
    var tau_Xf: second;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    Xf_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+77.85{millivolt})/5{millivolt}));
    tau_Xf = 1900{second}/(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+15{millivolt})/10{millivolt}))/1000{dimensionless};
    ode(Xf, time) = (Xf_infinity-Xf)/tau_Xf;
  enddef;

  def comp i_b_Na as
    var i_b_Na: A_per_F {pub: out};
    var g_b_Na: S_per_F {init: 0.9};
    var E_Na: volt {pub: in};
    var Vm: volt {pub: in};
    i_b_Na = g_b_Na*(Vm-E_Na);
  enddef;

  def comp i_b_Ca as
    var i_b_Ca: A_per_F {pub: out};
    var g_b_Ca: S_per_F {init: 0.69264};
    var E_Ca: volt {pub: in};
    var Vm: volt {pub: in};
    i_b_Ca = g_b_Ca*(Vm-E_Ca);
  enddef;

  def comp i_NaK as
    var i_NaK: A_per_F {pub: out};
    var E_Na: volt {pub: in};
    var time: second {pub: in};
    var Vm: volt {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Km_K: millimolar {init: 1};
    var Km_Na: millimolar {init: 40};
    var PNaK: A_per_F {init: 1.841424};
    i_NaK = PNaK*Ko/(Ko+Km_K)*Nai/(Nai+Km_Na)/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*(Vm*F)/(R*T))+0.0353{dimensionless}*exp(-Vm*F/(R*T)));
  enddef;

  def comp i_NaCa as
    var i_NaCa: A_per_F {pub: out};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    var Vm: volt {pub: in};
    var kNaCa: A_per_F {init: 4900};
    var alpha: dimensionless {init: 2.8571432};
    var gamma: dimensionless {init: 0.35};
    var Ksat: dimensionless {init: 0.1};
    var KmCa: millimolar {init: 1.38};
    var KmNai: millimolar {init: 87.5};
    i_NaCa = kNaCa*(exp(gamma*(Vm*F)/(R*T))*(pow(Nai, 3{dimensionless})*Cao)-exp((gamma-1{dimensionless})*(Vm*F)/(R*T))*(pow(Nao, 3{dimensionless})*(Cai*alpha)))/((pow(KmNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*((KmCa+Cao)*(1{dimensionless}+Ksat*exp((gamma-1{dimensionless})*(Vm*F)/(R*T)))));
  enddef;

  def comp i_PCa as
    var i_PCa: A_per_F {pub: out};
    var Cai: millimolar {pub: in};
    var time: second {pub: in};
    var Vm: volt {pub: in};
    var g_PCa: A_per_F {init: 0.4125};
    var KPCa: millimolar {init: 0.0005};
    i_PCa = g_PCa*Cai/(Cai+KPCa);
  enddef;

  def comp i_to as
    var i_to: A_per_F {pub: out};
    var g_to: S_per_F {init: 29.9038};
    var E_K: volt {pub: in};
    var time: second {pub: in, priv: out};
    var Vm: volt {pub: in, priv: out};
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*((Vm-E_K)*(q*r));
  enddef;

  def comp i_to_q_gate as
    var q: dimensionless {init: 0.839295925773219, pub: out};
    var q_inf: dimensionless;
    var tau_q: second;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    q_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm*1000{millivolt_per_volt}+53{millivolt})/13{millivolt}));
    tau_q = (6.06{second}+39.102{second}/(0.57{dimensionless}*exp(-0.08{per_millivolt}*(Vm*1000{millivolt_per_volt}+44{millivolt}))+0.065{dimensionless}*exp(0.1{per_millivolt}*(Vm*1000{millivolt_per_volt}+45.93{millivolt}))))/1000{dimensionless};
    ode(q, time) = (q_inf-q)/tau_q;
  enddef;

  def comp i_to_r_gate as
    var r: dimensionless {init: 0.00573289893326379, pub: out};
    var r_inf: dimensionless;
    var tau_r: second;
    var Vm: volt {pub: in};
    var time: second {pub: in};
    r_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Vm*1000{millivolt_per_volt}-22.3{millivolt})/18.75{millivolt}));
    tau_r = (2.75352{second}+14.40516{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(Vm*1000{millivolt_per_volt}+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(Vm*1000{millivolt_per_volt}+23.84{millivolt}))))/1000{dimensionless};
    ode(r, time) = (r_inf-r)/tau_r;
  enddef;

  def comp model_parameters as
    var Cao: millimolar {init: 1.8, pub: out};
    var Nao: millimolar {init: 151, pub: out};
    var Ki: millimolar {init: 150, pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
    var Cm: farad {init: 9.87109e-11, pub: out};
    var Vc: micrometre_cube {init: 8800, pub: out};
    var V_SR: micrometre_cube {init: 583.73, pub: out};
    var R: joule_per_mole_kelvin {init: 8.314472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
  enddef;

  def comp sodium_dynamics as
    var Nai: millimolar {init: 10.9248496211574, pub: out};
    var Cm: farad {pub: in};
    var Vc: micrometre_cube {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_b_Na: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    ode(Nai, time) = -Cm*(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(F*(Vc*1e-18{metre3_per_um3}));
  enddef;

  def comp calcium_dynamics as
    var Cai: millimolar {init: 1.80773974140477e-5, pub: out};
    var Ca_SR: millimolar {init: 0.2734234751931};
    var Vc: micrometre_cube {pub: in};
    var V_SR: micrometre_cube {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm: volt {pub: in};
    var Cm: farad {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_PCa: A_per_F {pub: in};
    var i_b_Ca: A_per_F {pub: in};
    var i_NaCa: A_per_F {pub: in};
    var a_rel: millimolar_per_second {init: 16.464};
    var b_rel: millimolar {init: 0.25};
    var c_rel: millimolar_per_second {init: 8.232};
    var g: dimensionless {init: 0.999999981028517};
    var tau_g: second {init: 0.002};
    var g_inf: dimensionless;
    var Kup: millimolar {init: 0.00025};
    var Buf_C: millimolar {init: 0.25};
    var Buf_SR: millimolar {init: 10};
    var Kbuf_C: millimolar {init: 0.001};
    var Kbuf_SR: millimolar {init: 0.3};
    var Cai_bufc: dimensionless;
    var Ca_SR_bufSR: dimensionless;
    var d: dimensionless {pub: in};
    var VmaxUp: millimolar_per_second {init: 0.56064};
    var const2: dimensionless;
    var V_leak: per_second {init: 0.00044444};
    var i_rel: millimolar_per_second;
    var i_up: millimolar_per_second;
    var i_leak: millimolar_per_second;
    i_rel = (c_rel+a_rel*sqr(Ca_SR)/(sqr(b_rel)+sqr(Ca_SR)))*(d*(g*0.0411{dimensionless}));
    i_up = VmaxUp/(1{dimensionless}+sqr(Kup)/sqr(Cai));
    i_leak = (Ca_SR-Cai)*V_leak;
    g_inf = sel
      case Cai <= 0.00035{millimolar}:
        1{dimensionless}/(1{dimensionless}+pow(Cai/0.00035{millimolar}, 6{dimensionless}));
      otherwise:
        1{dimensionless}/(1{dimensionless}+pow(Cai/0.00035{millimolar}, 16{dimensionless}));
    endsel;
    const2 = sel
      case (g_inf > g) and (Vm > -0.06{volt}):
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    ode(g, time) = const2*(g_inf-g)/tau_g;
    Cai_bufc = 1{dimensionless}/(1{dimensionless}+Buf_C*Kbuf_C/sqr(Cai+Kbuf_C));
    Ca_SR_bufSR = 1{dimensionless}/(1{dimensionless}+Buf_SR*Kbuf_SR/sqr(Ca_SR+Kbuf_SR));
    ode(Cai, time) = Cai_bufc*(i_leak-i_up+i_rel-(i_CaL+i_b_Ca+i_PCa-2{dimensionless}*i_NaCa)*Cm/(2{dimensionless}*(Vc*(F*1e-18{metre3_per_um3}))));
    ode(Ca_SR, time) = Ca_SR_bufSR*Vc/V_SR*(i_up-(i_rel+i_leak));
  enddef;

  def group as containment for
    comp Membrane incl
      comp calcium_dynamics;
      comp sodium_dynamics;
      comp model_parameters;
      comp electric_potentials;
      comp i_b_Ca;
      comp i_b_Na;
      comp i_NaK;
      comp i_NaCa;
      comp i_PCa;
      comp i_K1;
      comp stim_mode;
      comp current_blockers;
      comp i_Na incl
        comp i_Na_m_gate;
        comp i_Na_h_gate;
        comp i_Na_j_gate;
      endcomp;
      comp i_CaL incl
        comp i_CaL_d_gate;
        comp i_CaL_f1_gate;
        comp i_CaL_f2_gate;
        comp i_CaL_fCa_gate;
      endcomp;
      comp i_Kr incl
        comp i_Kr_Xr1_gate;
        comp i_Kr_Xr2_gate;
      endcomp;
      comp i_Ks incl
        comp i_Ks_Xs_gate;
      endcomp;
      comp i_to incl
        comp i_to_q_gate;
        comp i_to_r_gate;
      endcomp;
      comp i_f incl
        comp i_f_Xf_gate;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp i_Na incl
      comp i_Na_m_gate;
      comp i_Na_h_gate;
      comp i_Na_j_gate;
    endcomp;
    comp i_CaL incl
      comp i_CaL_d_gate;
      comp i_CaL_f1_gate;
      comp i_CaL_f2_gate;
      comp i_CaL_fCa_gate;
    endcomp;
    comp i_Kr incl
      comp i_Kr_Xr1_gate;
      comp i_Kr_Xr2_gate;
    endcomp;
    comp i_Ks incl
      comp i_Ks_Xs_gate;
    endcomp;
    comp i_to incl
      comp i_to_q_gate;
      comp i_to_r_gate;
    endcomp;
    comp i_f incl
      comp i_f_Xf_gate;
    endcomp;
  enddef;
  def map between Membrane and environment for
    vars time and time;
  enddef;
  def map between stim_mode and environment for
    vars time and time;
  enddef;
  def map between i_CaL and environment for
    vars time and time;
  enddef;
  def map between i_Kr and environment for
    vars time and time;
  enddef;
  def map between i_K1 and environment for
    vars time and time;
  enddef;
  def map between i_Ks and environment for
    vars time and time;
  enddef;
  def map between i_to and environment for
    vars time and time;
  enddef;
  def map between i_f and environment for
    vars time and time;
  enddef;
  def map between i_NaCa and environment for
    vars time and time;
  enddef;
  def map between i_NaK and environment for
    vars time and time;
  enddef;
  def map between i_Na and environment for
    vars time and time;
  enddef;
  def map between i_PCa and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between sodium_dynamics and environment for
    vars time and time;
  enddef;
  def map between stim_mode and Membrane for
    vars i_stim and i_stim;
  enddef;
  def map between i_CaL and Membrane for
    vars Vm and Vm;
    vars i_CaL and i_CaL;
  enddef;
  def map between i_K1 and Membrane for
    vars Vm and Vm;
    vars i_K1 and i_K1;
  enddef;
  def map between i_Na and Membrane for
    vars Vm and Vm;
    vars i_Na and i_Na;
  enddef;
  def map between i_PCa and Membrane for
    vars Vm and Vm;
    vars i_PCa and i_PCa;
  enddef;
  def map between i_Kr and Membrane for
    vars Vm and Vm;
    vars i_Kr and i_Kr;
  enddef;
  def map between i_Ks and Membrane for
    vars Vm and Vm;
    vars i_Ks and i_Ks;
  enddef;
  def map between i_to and Membrane for
    vars Vm and Vm;
    vars i_to and i_to;
  enddef;
  def map between i_f and Membrane for
    vars Vm and Vm;
    vars i_f and i_f;
  enddef;
  def map between i_b_Na and Membrane for
    vars Vm and Vm;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between i_b_Ca and Membrane for
    vars Vm and Vm;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between i_NaK and Membrane for
    vars Vm and Vm;
    vars i_NaK and i_NaK;
  enddef;
  def map between i_NaCa and Membrane for
    vars Vm and Vm;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between current_blockers and i_Na for
    vars TTX_3uM and TTX_3uM;
    vars TTX_10uM and TTX_10uM;
    vars TTX_30uM and TTX_30uM;
  enddef;
  def map between current_blockers and i_Kr for
    vars E4031_30nM and E4031_30nM;
    vars E4031_100nM and E4031_100nM;
  enddef;
  def map between current_blockers and i_CaL for
    vars nifed_3nM and nifed_3nM;
    vars nifed_10nM and nifed_10nM;
    vars nifed_30nM and nifed_30nM;
    vars nifed_100nM and nifed_100nM;
  enddef;
  def map between current_blockers and i_Ks for
    vars Chromanol_iKs30 and Chromanol_iKs30;
    vars Chromanol_iKs50 and Chromanol_iKs50;
    vars Chromanol_iKs70 and Chromanol_iKs70;
    vars Chromanol_iKs90 and Chromanol_iKs90;
  enddef;
  def map between electric_potentials and model_parameters for
    vars Nao and Nao;
    vars Cao and Cao;
    vars Ki and Ki;
    vars Ko and Ko;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between electric_potentials and i_Kr for
    vars E_K and E_K;
  enddef;
  def map between electric_potentials and i_Ks for
    vars E_Ks and E_Ks;
  enddef;
  def map between electric_potentials and i_K1 for
    vars E_K and E_K;
  enddef;
  def map between electric_potentials and i_to for
    vars E_K and E_K;
  enddef;
  def map between electric_potentials and i_b_Na for
    vars E_Na and E_Na;
  enddef;
  def map between electric_potentials and i_Na for
    vars E_Na and E_Na;
  enddef;
  def map between electric_potentials and i_b_Ca for
    vars E_Ca and E_Ca;
  enddef;
  def map between electric_potentials and i_NaK for
    vars E_Na and E_Na;
  enddef;
  def map between i_CaL and calcium_dynamics for
    vars Cai and Cai;
    vars i_CaL and i_CaL;
    vars d and d;
  enddef;
  def map between i_PCa and calcium_dynamics for
    vars Cai and Cai;
    vars i_PCa and i_PCa;
  enddef;
  def map between i_b_Na and sodium_dynamics for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between i_NaK and model_parameters for
    vars Ko and Ko;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between i_NaCa and model_parameters for
    vars Nao and Nao;
    vars Cao and Cao;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between i_NaCa and calcium_dynamics for
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between i_b_Ca and calcium_dynamics for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between i_Ks and calcium_dynamics for
    vars Cai and Cai;
  enddef;
  def map between stim_mode and model_parameters for
    vars Cm and Cm;
  enddef;
  def map between calcium_dynamics and model_parameters for
    vars Cm and Cm;
    vars F and F;
    vars Vc and Vc;
    vars V_SR and V_SR;
  enddef;
  def map between sodium_dynamics and model_parameters for
    vars Cm and Cm;
    vars F and F;
    vars Vc and Vc;
  enddef;
  def map between sodium_dynamics and i_Na for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_dynamics and i_NaK for
    vars i_NaK and i_NaK;
    vars Nai and Nai;
  enddef;
  def map between sodium_dynamics and i_NaCa for
    vars i_NaCa and i_NaCa;
    vars Nai and Nai;
  enddef;
  def map between calcium_dynamics and Membrane for
    vars Vm and Vm;
  enddef;
  def map between calcium_dynamics and electric_potentials for
    vars Cai and Cai;
  enddef;
  def map between sodium_dynamics and electric_potentials for
    vars Nai and Nai;
  enddef;
  def map between i_Na and i_Na_m_gate for
    vars m and m;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_Na and i_Na_j_gate for
    vars j and j;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_Na and i_Na_h_gate for
    vars h and h;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_CaL and i_CaL_d_gate for
    vars d and d;
    vars time and time;
    vars Vm and Vm;
    vars Cai and Cai;
  enddef;
  def map between i_CaL and i_CaL_fCa_gate for
    vars Cai and Cai;
    vars fCa and fCa;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_CaL and i_CaL_f1_gate for
    vars Cai and Cai;
    vars f1 and f1;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_CaL and i_CaL_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_CaL and model_parameters for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
  enddef;
  def map between i_Kr and model_parameters for
    vars Ko and Ko;
    vars Cao and Cao;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between i_K1 and model_parameters for
    vars Ko and Ko;
  enddef;
  def map between i_Kr and i_Kr_Xr1_gate for
    vars Cao and Cao;
    vars Xr1 and Xr1;
    vars time and time;
    vars Vm and Vm;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between i_Kr and i_Kr_Xr2_gate for
    vars Xr2 and Xr2;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_Ks and i_Ks_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_to and i_to_q_gate for
    vars q and q;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_to and i_to_r_gate for
    vars r and r;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between i_f and i_f_Xf_gate for
    vars Xf and Xf;
    vars time and time;
    vars Vm and Vm;
  enddef;
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "aslanidi_atrial_model_2009", which is
  // declared on the <model> element.
  // A human readable name for the model.
  // Keyword(s)
  // Reference
  // make additional copies of this rdf:li block
  //                       for more authors
  // Reference title
enddef;
