// reference: subject_type keyword; electrophysiology
def model grandi_2011_atrial as
  // Grandi et al. 2011 atrial action potential and Ca2+ model.
  def unit mM as
    unit metre {expo: -3};
    unit mole {expo: 1};
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3, mult: 1000.0};
    unit second {expo: -1};
    unit mole {expo: 1};
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1, mult: 1000.0};
  enddef;
  def unit per_mM_per_ms as
    unit metre {expo: 3, mult: 1000.0};
    unit second {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit A_per_F as
    unit gram {expo: 1, mult: 1000.0};
    unit metre {expo: 2};
    unit second {expo: -4};
    unit ampere {expo: -1};
  enddef;
  def unit ms as
    unit second {expo: 1, mult: 0.001};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit dimensionless_times_1e15 as
    unit dimensionless {expo: 1, mult: 1000000000000000.0};
  enddef;
  def unit um as
    unit metre {expo: 1, mult: 1e-06};
  enddef;
  def unit g_m4_per_s4_per_A2_times_100000 as
    unit gram {expo: 1, mult: 100000.0};
    unit metre {expo: 4};
    unit second {expo: -4};
    unit ampere {expo: -2};
  enddef;
  def unit mV as
    unit gram {expo: 1};
    unit metre {expo: 2};
    unit second {expo: -3};
    unit ampere {expo: -1};
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1, mult: 1000.0};
    unit metre {expo: -2};
    unit second {expo: 2};
    unit ampere {expo: 1};
  enddef;
  def unit per_mV as
    unit gram {expo: -1};
    unit metre {expo: -2};
    unit second {expo: 3};
    unit ampere {expo: 1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit uA_per_cm2 as
    unit metre {expo: -2, mult: 0.01};
    unit ampere {expo: 1};
  enddef;
  def unit cm_per_s as
    unit metre {expo: 1, mult: 0.01};
    unit second {expo: -1};
  enddef;
  def unit mol4_per_m12 as
    unit metre {expo: -12};
    unit mole {expo: 4};
  enddef;
  def unit C_per_mol as
    unit second {expo: 1};
    unit ampere {expo: 1};
    unit mole {expo: -1};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram {expo: 1};
    unit metre {expo: 2};
    unit second {expo: -2};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit per_mM2_per_ms as
    unit metre {expo: 6, mult: 1000.0};
    unit second {expo: -1};
    unit mole {expo: -2};
  enddef;

  def comp buffca as
    var Bmax_CaM: mM {init: 0.024};
    var Bmax_SLhighj: mM;
    var Bmax_SLhighsl: mM;
    var Bmax_SLlowj: mM;
    var Bmax_SLlowsl: mM;
    var Bmax_SR: mM {init: 0.0171};
    var Bmax_TnChigh: mM {init: 0.14};
    var Bmax_TnClow: mM {init: 0.07};
    var Bmax_myosin: mM {init: 0.14};
    var CaM: mM {init: 7.02128101897185673e-04};
    var J_CaB_cytosol: mM_per_ms {pub: out};
    var J_CaB_jntion: mM_per_ms {pub: out};
    var J_CaB_sl: mM_per_ms {pub: out};
    var Myoc: mM {init: 3.94923428392655786e-03};
    var Myom: mM {init: 1.35538532457244482e-01};
    var SLH_jn: mM {init: 1.03674364292988680e-01};
    var SLH_sl: mM {init: 1.90759804527589089e-01};
    var SLL_jn: mM {init: 1.35640688636079511e-02};
    var SLL_sl: mM {init: 2.14063418881809235e-02};
    var SRB: mM {init: 4.45327242854324807e-03};
    var TnCHc: mM {init: 1.27856586024588575e-01};
    var TnCHm: mM {init: 5.69999505293381902e-03};
    var TnCL: mM {init: 1.83143535034222225e-02};
    var koff_cam: mS_per_uF {init: 0.238};
    var koff_myoca: mS_per_uF {init: 0.00046};
    var koff_myomg: mS_per_uF {init: 5.7e-05};
    var koff_slh: mS_per_uF {init: 0.03};
    var koff_sll: mS_per_uF {init: 1.3};
    var koff_sr: mS_per_uF {init: 0.06};
    var koff_tnchca: mS_per_uF {init: 3.2e-05};
    var koff_tnchmg: mS_per_uF {init: 0.00333};
    var koff_tncl: mS_per_uF;
    var kon_cam: per_mM_per_ms {init: 34.0};
    var kon_myoca: per_mM_per_ms {init: 13.8};
    var kon_myomg: per_mM_per_ms {init: 0.0157};
    var kon_slh: per_mM_per_ms {init: 100.0};
    var kon_sll: per_mM_per_ms {init: 100.0};
    var kon_sr: per_mM_per_ms {init: 100.0};
    var kon_tnchca: per_mM_per_ms {init: 2.37};
    var kon_tnchmg: per_mM_per_ms {init: 0.003};
    var kon_tncl: per_mM_per_ms {init: 32.7};
    var Vjn: liter {pub: in};
    var Vmyo: liter {pub: in};
    var Vsl: liter {pub: in};
    var Ca_i: mM {pub: in};
    var time: ms {pub: in};
    var Mg_i: mM {pub: in};
    var Ca_jn: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var ISO: dimensionless {pub: in};
    Bmax_SLhighj = 0.00165{mM}*Vmyo/Vjn*0.1{dimensionless};
    Bmax_SLhighsl = Vmyo/Vsl*0.0134{mM};
    Bmax_SLlowj = 0.0046{mM}*Vmyo/Vjn*0.1{dimensionless};
    Bmax_SLlowsl = Vmyo/Vsl*0.0374{mM};
    ode(CaM, time) = kon_cam*Ca_i*(Bmax_CaM-CaM)-koff_cam*CaM;
    J_CaB_cytosol = ode(TnCL, time)+ode(TnCHc, time)+ode(TnCHm, time)+ode(CaM, time)+ode(Myoc, time)+ode(Myom, time)+ode(SRB, time);
    J_CaB_jntion = ode(SLL_jn, time)+ode(SLH_jn, time);
    J_CaB_sl = ode(SLL_sl, time)+ode(SLH_sl, time);
    ode(Myoc, time) = kon_myoca*Ca_i*(Bmax_myosin-Myoc-Myom)-koff_myoca*Myoc;
    ode(Myom, time) = kon_myomg*Mg_i*(Bmax_myosin-Myoc-Myom)-koff_myomg*Myom;
    ode(SLH_jn, time) = kon_slh*Ca_jn*(Bmax_SLhighj-SLH_jn)-koff_slh*SLH_jn;
    ode(SLH_sl, time) = kon_slh*Ca_sl*(Bmax_SLhighsl-SLH_sl)-koff_slh*SLH_sl;
    ode(SLL_jn, time) = kon_sll*Ca_jn*(Bmax_SLlowj-SLL_jn)-koff_sll*SLL_jn;
    ode(SLL_sl, time) = kon_sll*Ca_sl*(Bmax_SLlowsl-SLL_sl)-koff_sll*SLL_sl;
    ode(SRB, time) = kon_sr*Ca_i*(Bmax_SR-SRB)-koff_sr*SRB;
    ode(TnCHc, time) = kon_tnchca*Ca_i*(Bmax_TnChigh-TnCHc-TnCHm)-koff_tnchca*TnCHc;
    ode(TnCHm, time) = kon_tnchmg*Mg_i*(Bmax_TnChigh-TnCHc-TnCHm)-koff_tnchmg*TnCHm;
    ode(TnCL, time) = kon_tncl*Ca_i*(Bmax_TnClow-TnCL)-koff_tncl*TnCL;
    koff_tncl = (1.0{dimensionless}+0.5{dimensionless}*ISO)*0.0196{mS_per_uF};
  enddef;

  def comp buffna as
    var Bmax_Na_jn: mM {init: 7.561};
    var Bmax_Na_sl: mM {init: 1.65};
    var NaB_jn: mM {init: 3.61396062660070427e+00, pub: out};
    var NaB_sl: mM {init: 7.88607791910409195e-01, pub: out};
    var koff_na: mS_per_uF {init: 0.001};
    var kon_na: per_mM_per_ms {init: 0.0001};
    var time: ms {pub: in};
    var Na_jn: mM {pub: in};
    var Na_sl: mM {pub: in};
    ode(NaB_jn, time) = kon_na*Na_jn*(Bmax_Na_jn-NaB_jn)-koff_na*NaB_jn;
    ode(NaB_sl, time) = kon_na*Na_sl*(Bmax_Na_sl-NaB_sl)-koff_na*NaB_sl;
  enddef;

  def comp calcium as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Ca_i: mM {init: 2.10808768153058460e-04, pub: out};
    var Ca_jn: mM {init: 3.25814677291117296e-04, pub: out};
    var Ca_sl: mM {init: 2.33018340557575125e-04, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_calcium_concentration
    var Ca_sr: mM {init: 5.02305826642838293e-01, pub: out};
    var Csqn: mM {init: 1.13337536953687845e+00};
    var ICa_tot_jn: A_per_F {pub: out};
    var ICa_tot_sl: A_per_F {pub: out};
    var J_CaB_cytosol: mM_per_ms {pub: in};
    var time: ms {pub: in};
    var JCa_slmyo: m3_per_s {pub: in};
    var Vmyo: liter {pub: in};
    var Vsr: liter {pub: in};
    var J_serca: mM_per_ms {pub: in};
    var J_CaB_jntion: mM_per_ms {pub: in};
    var C: farad {pub: in};
    var JCa_jnsl: m3_per_s {pub: in};
    var Vjn: liter {pub: in};
    var F: C_per_mol {pub: in};
    var J_SRCarel: mM_per_ms {pub: in};
    var J_SR_leak: mM_per_ms {pub: in};
    var J_CaB_sl: mM_per_ms {pub: in};
    var Vsl: liter {pub: in};
    var Bmax_Csqn: mM {pub: in};
    var koff_csqn: mS_per_uF {pub: in};
    var kon_csqn: per_mM_per_ms {pub: in};
    var ICaB_jn: A_per_F {pub: in};
    var ICaL_Ca_jn: A_per_F {pub: in};
    var INaCa_jn: A_per_F {pub: in};
    var IpCa_jn: A_per_F {pub: in};
    var ICaB_sl: A_per_F {pub: in};
    var ICaL_Ca_sl: A_per_F {pub: in};
    var INaCa_sl: A_per_F {pub: in};
    var IpCa_sl: A_per_F {pub: in};
    ode(Ca_i, time) = -J_serca*Vsr/Vmyo-J_CaB_cytosol+JCa_slmyo/Vmyo*(Ca_sl-Ca_i);
    ode(Ca_jn, time) = -ICa_tot_jn*C/(Vjn*2.0{dimensionless}*F)+JCa_jnsl/Vjn*(Ca_sl-Ca_jn)-J_CaB_jntion+J_SRCarel*Vsr/Vjn+J_SR_leak*Vmyo/Vjn;
    ode(Ca_sl, time) = -ICa_tot_sl*C/(Vsl*2.0{dimensionless}*F)+JCa_jnsl/Vsl*(Ca_jn-Ca_sl)+JCa_slmyo/Vsl*(Ca_i-Ca_sl)-J_CaB_sl;
    ode(Ca_sr, time) = J_serca-(J_SR_leak*Vmyo/Vsr+J_SRCarel)-ode(Csqn, time);
    ode(Csqn, time) = kon_csqn*Ca_sr*(Bmax_Csqn-Csqn)-koff_csqn*Csqn;
    ICa_tot_jn = ICaL_Ca_jn+ICaB_jn+IpCa_jn-2.0{dimensionless}*INaCa_jn;
    ICa_tot_sl = ICaL_Ca_sl+ICaB_sl+IpCa_sl-2.0{dimensionless}*INaCa_sl;
  enddef;

  def comp calcium_Csqn as
    var Bmax_Csqn: mM {pub: out};
    var koff_csqn: mS_per_uF {init: 65.0, pub: out};
    var kon_csqn: per_mM_per_ms {init: 100.0, pub: out};
    var Vmyo: liter {pub: in};
    var Vsr: liter {pub: in};
    Bmax_Csqn = Vmyo/Vsr*0.14{mM};
  enddef;

  def comp cell as
    var AF: dimensionless {init: 0.0, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var C: farad {init: 1.1e-10, pub: out};
    var ISO: dimensionless {init: 0.0, pub: out};
    var RA: dimensionless {init: 0.0, pub: out};
  enddef;

  def comp engine as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp geom as
    var JCa_jnsl: m3_per_s {init: 8.24130542277896849e-13, pub: out};
    var JCa_slmyo: m3_per_s {init: 3.72425607984805052e-12, pub: out};
    var JNa_jnsl: m3_per_s {init: 1.83127823220607955e-14, pub: out};
    var JNa_slmyo: m3_per_s {init: 1.63862792221979433e-12, pub: out};
    var Vcell: liter;
    var Vjn: liter {pub: out};
    var Vmyo: liter {pub: out};
    var Vsl: liter {pub: out};
    var Vsr: liter {pub: out};
    var cell_length: um {init: 100.0};
    var cell_radius: um {init: 10.25};
    var pi: dimensionless {init: 3.14159265358979312e+00};
    Vcell = pi*sqr(cell_radius)*cell_length*1e-15{dimensionless_times_1e15};
    Vjn = 0.0539{dimensionless}*0.01{dimensionless}*Vcell;
    Vmyo = 0.65{dimensionless}*Vcell;
    Vsl = 0.02{dimensionless}*Vcell;
    Vsr = 0.035{dimensionless}*Vcell;
  enddef;

  def comp icab as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current
    var ICaB: A_per_F;
    var ICaB_jn: A_per_F {pub: out};
    var ICaB_sl: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_calcium_current_conductance
    var gCaB: mS_per_uF {init: 6.06430000000000033e-04};
    var Fjn: dimensionless {pub: in};
    var V: mV {pub: in};
    var ECa_jn: mV {pub: in};
    var Fsl: dimensionless {pub: in};
    var ECa_sl: mV {pub: in};
    ICaB = ICaB_jn+ICaB_sl;
    ICaB_jn = Fjn*gCaB*(V-ECa_jn);
    ICaB_sl = Fsl*gCaB*(V-ECa_sl);
  enddef;

  def comp ical as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var ICaL: A_per_F;
    var ICaL_Ca: A_per_F;
    var ICaL_Ca_jn: A_per_F {pub: out};
    var ICaL_Ca_sl: A_per_F {pub: out};
    var ICaL_K: A_per_F {pub: out};
    var ICaL_Na: A_per_F;
    var ICaL_Na_jn: A_per_F {pub: out};
    var ICaL_Na_sl: A_per_F {pub: out};
    var Q10CaL: dimensionless {init: 1.8};
    var d: dimensionless {init: 2.16850216379767157e-05};
    var f: dimensionless {init: 9.98384427312367095e-01};
    var fCaB_jn: dimensionless {init: 4.49572164109603364e-02};
    var fCaB_sl: dimensionless {init: 3.28512098597005947e-02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var f_conducting: dimensionless {init: 1.0};
    var fcaCaMSL: dimensionless {init: 0.0};
    var fcaCaj: dimensionless {init: 0.0};
    var ibarca_jn: uA_per_cm2;
    var ibarca_sl: uA_per_cm2;
    var ibark: uA_per_cm2;
    var ibarna_jn: uA_per_cm2;
    var ibarna_sl: uA_per_cm2;
    var pCa: cm_per_s;
    var pCa_max: cm_per_s {init: 0.00027};
    var pK: cm_per_s;
    var pK_max: cm_per_s {init: 1.35e-07};
    var pNa: cm_per_s;
    var pNa_max: cm_per_s {init: 7.5e-09};
    var Fjn_CaL: dimensionless {pub: in};
    var Q: dimensionless {pub: in};
    var Fsl_CaL: dimensionless {pub: in};
    var time: ms {pub: in};
    var ical_d_inf: dimensionless {pub: in};
    var ical_d_tau: ms {pub: in};
    var ical_f_inf: dimensionless {pub: in};
    var ical_f_tau: ms {pub: in};
    var Ca_jn: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var Ca_o: mM {pub: in};
    var V: mV {pub: in};
    var F: C_per_mol {pub: in};
    var FRT: per_mV {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_jn: mM {pub: in};
    var Na_sl: mM {pub: in};
    var AF: dimensionless {pub: in};
    var ISO: dimensionless {pub: in};
    ICaL = ICaL_Ca+ICaL_K+ICaL_Na;
    ICaL_Ca = ICaL_Ca_jn+ICaL_Ca_sl;
    ICaL_Ca_jn = Fjn_CaL*ibarca_jn*d*f*(1.0{dimensionless}-fCaB_jn+fcaCaj)*pow(Q10CaL, Q)*0.45{g_m4_per_s4_per_A2_times_100000};
    ICaL_Ca_sl = Fsl_CaL*ibarca_sl*d*f*(1.0{dimensionless}-fCaB_sl+fcaCaMSL)*pow(Q10CaL, Q)*0.45{g_m4_per_s4_per_A2_times_100000};
    ICaL_K = ibark*d*f*(Fjn_CaL*(fcaCaj+1.0{dimensionless}-fCaB_jn)+Fsl_CaL*(fcaCaMSL+1.0{dimensionless}-fCaB_sl))*pow(Q10CaL, Q)*0.45{g_m4_per_s4_per_A2_times_100000};
    ICaL_Na = ICaL_Na_jn+ICaL_Na_sl;
    ICaL_Na_jn = Fjn_CaL*ibarna_jn*d*f*(1.0{dimensionless}-fCaB_jn+fcaCaj)*pow(Q10CaL, Q)*0.45{g_m4_per_s4_per_A2_times_100000};
    ICaL_Na_sl = Fsl_CaL*ibarna_sl*d*f*(1.0{dimensionless}-fCaB_sl+fcaCaMSL)*pow(Q10CaL, Q)*0.45{g_m4_per_s4_per_A2_times_100000};
    ode(d, time) = (ical_d_inf-d)/ical_d_tau;
    ode(f, time) = (ical_f_inf-f)/ical_f_tau;
    ode(fCaB_jn, time) = (1.7{m3_per_mol}*Ca_jn*(1.0{dimensionless}-fCaB_jn)-0.0119{dimensionless}*fCaB_jn)*1.0{mS_per_uF};
    ode(fCaB_sl, time) = (1.7{m3_per_mol}*Ca_sl*(1.0{dimensionless}-fCaB_sl)-0.0119{dimensionless}*fCaB_sl)*1.0{mS_per_uF};
    ibarca_jn = pCa*4.0{dimensionless}*(V*F*FRT)*(0.341{dimensionless}*Ca_jn*exp(2.0{dimensionless}*V*FRT)-0.341{dimensionless}*Ca_o)/(exp(2.0{dimensionless}*V*FRT)-1.0{dimensionless})*f_conducting;
    ibarca_sl = pCa*4.0{dimensionless}*(V*F*FRT)*(0.341{dimensionless}*Ca_sl*exp(2.0{dimensionless}*V*FRT)-0.341{dimensionless}*Ca_o)/(exp(2.0{dimensionless}*V*FRT)-1.0{dimensionless})*f_conducting;
    ibark = pK*V*F*FRT*(0.75{dimensionless}*K_i*exp(V*FRT)-0.75{dimensionless}*K_o)/(exp(V*FRT)-1.0{dimensionless})*f_conducting;
    ibarna_jn = pNa*V*F*FRT*(0.75{dimensionless}*Na_jn*exp(V*FRT)-0.75{dimensionless}*Na_o)/(exp(V*FRT)-1.0{dimensionless})*f_conducting;
    ibarna_sl = pNa*V*F*FRT*(0.75{dimensionless}*Na_sl*exp(V*FRT)-0.75{dimensionless}*Na_o)/(exp(V*FRT)-1.0{dimensionless})*f_conducting;
    pCa = (1.0{dimensionless}+0.5{dimensionless}*ISO)*(1.0{dimensionless}-0.5{dimensionless}*AF)*pCa_max;
    pK = (1.0{dimensionless}+0.5{dimensionless}*ISO)*(1.0{dimensionless}-0.5{dimensionless}*AF)*pK_max;
    pNa = (1.0{dimensionless}+0.5{dimensionless}*ISO)*(1.0{dimensionless}-0.5{dimensionless}*AF)*pNa_max;
  enddef;

  def comp ical_d as
    var ical_d_inf: dimensionless {pub: out};
    var ical_d_tau: ms {pub: out};
    var ISO: dimensionless {pub: in};
    var V: mV {pub: in};
    ical_d_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+3.0{mV}*ISO+9.0{mV})/6.0{mV}));
    ical_d_tau = ical_d_inf*(1.0{dimensionless}-exp(-(V+3.0{mV}*ISO+9.0{mV})/6.0{mV}))/(0.035{per_mV_per_ms}*(V+3.0{mV}*ISO+9.0{mV}));
  enddef;

  def comp ical_f as
    var ical_f_inf: dimensionless {pub: out};
    var ical_f_tau: ms {pub: out};
    var ISO: dimensionless {pub: in};
    var V: mV {pub: in};
    ical_f_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+3.0{mV}*ISO+30.0{mV})/7.0{mV}))+0.2{dimensionless}/(1.0{dimensionless}+exp((50.0{mV}-V-3.0{mV}*ISO)/20.0{mV}));
    ical_f_tau = 1.0{dimensionless}/(0.0197{mS_per_uF}*exp(-sqr(0.0337{per_mV}*(V+3.0{mV}*ISO+25.0{mV})))+0.02{mS_per_uF});
  enddef;

  def comp iclb as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_chloride_current
    var IClB: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_chloride_current_conductance
    var gClB: mS_per_uF {init: 0.009};
    var V: mV {pub: in};
    var ECl: mV {pub: in};
    IClB = gClB*(V-ECl);
  enddef;

  def comp iclca as
    var GClCa: mS_per_uF {init: 0.0548};
    var IClCa: A_per_F {pub: out};
    var IClCa_jn: A_per_F;
    var IClCa_sl: A_per_F;
    var KdClCa: mM {init: 0.1};
    var Ca_jn: mM {pub: in};
    var Fjn: dimensionless {pub: in};
    var V: mV {pub: in};
    var ECl: mV {pub: in};
    var Ca_sl: mM {pub: in};
    var Fsl: dimensionless {pub: in};
    IClCa = IClCa_jn+IClCa_sl;
    IClCa_jn = Fjn*GClCa/(1.0{dimensionless}+KdClCa/Ca_jn)*(V-ECl);
    IClCa_sl = Fsl*GClCa/(1.0{dimensionless}+KdClCa/Ca_sl)*(V-ECl);
  enddef;

  def comp ik1 as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var IK1: A_per_F {pub: out};
    var gK1: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var gK1_max: mS_per_uF {init: 0.0525};
    var ik1_inf: dimensionless;
    var V: mV {pub: in};
    var EK: mV {pub: in};
    var AF: dimensionless {pub: in};
    var K_o: mM {pub: in};
    var ik1_inf_a: mS_per_uF {pub: in};
    var ik1_inf_b: mS_per_uF {pub: in};
    IK1 = gK1*ik1_inf*(V-EK);
    gK1 = (1.0{dimensionless}+AF)*sqrt(K_o/5.4{mM})*gK1_max;
    ik1_inf = ik1_inf_a/(ik1_inf_a+ik1_inf_b);
  enddef;

  def comp ik1_ik1_inf as
    var ik1_inf_a: mS_per_uF {pub: out};
    var ik1_inf_b: mS_per_uF {pub: out};
    var V: mV {pub: in};
    var EK: mV {pub: in};
    ik1_inf_a = 1.0{mS_per_uF}*(1.02{dimensionless}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V-EK-59.215{mV}))));
    ik1_inf_b = 1.0{mS_per_uF}*((0.49124{dimensionless}*exp(0.08032{per_mV}*(V+5.476{mV}-EK))+exp(0.06175{per_mV}*(V-EK-594.31{mV})))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V-EK+4.753{mV}))));
  enddef;

  def comp ikp as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_plateau_potassium_current
    var IKp: A_per_F {pub: out};
    var IKp_jn: A_per_F;
    var IKp_sl: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_plateau_potassium_current_conductance
    var gKp: mS_per_uF {init: 0.002};
    var kp: dimensionless;
    var Fjn: dimensionless {pub: in};
    var V: mV {pub: in};
    var EK: mV {pub: in};
    var Fsl: dimensionless {pub: in};
    IKp = IKp_jn+IKp_sl;
    IKp_jn = Fjn*gKp*kp*(V-EK);
    IKp_sl = Fsl*gKp*kp*(V-EK);
    kp = 1.0{dimensionless}/(1.0{dimensionless}+exp(7.488{dimensionless}-V/5.98{mV}));
  enddef;

  def comp ikr as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var IKr: A_per_F {pub: out};
    var gKr: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var gKr_max: mS_per_uF {init: 0.035};
    var rr: dimensionless;
    var xr: dimensionless {init: 1.31290096227093382e-03};
    var V: mV {pub: in};
    var EK: mV {pub: in};
    var K_o: mM {pub: in};
    var time: ms {pub: in};
    var ikr_xr_inf: dimensionless {pub: in};
    var ikr_xr_tau: ms {pub: in};
    IKr = gKr*xr*rr*(V-EK);
    gKr = gKr_max*sqrt(K_o/5.4{mM});
    rr = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+74.0{mV})/24.0{mV}));
    ode(xr, time) = (ikr_xr_inf-xr)/ikr_xr_tau;
  enddef;

  def comp ikr_xr as
    var ikr_xr_inf: dimensionless {pub: out};
    var ikr_xr_tau: ms {pub: out};
    var V: mV {pub: in};
    ikr_xr_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+10.0{mV})/5.0{mV}));
    ikr_xr_tau = +550.0{ms}/(1.0{dimensionless}+exp((-22.0{mV}-V)/9.0{mV}))*6.0{dimensionless}/(1.0{dimensionless}+exp((V+11.0{mV})/9.0{mV}))+230.0{ms}/(1.0{dimensionless}+exp((V+40.0{mV})/20.0{mV}));
  enddef;

  def comp iks as
    var EKs: mV;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var IKs: A_per_F {pub: out};
    var IKs_jn: A_per_F;
    var IKs_sl: A_per_F;
    var gKs_jn: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var gKs_max: mS_per_uF {init: 0.0035};
    var gKs_sl: mS_per_uF;
    var pNaK: dimensionless {init: 0.01833};
    var xs: dimensionless {init: 7.49436760722081534e-03};
    var K_o: mM {pub: in};
    var Na_o: mM {pub: in};
    var FRT: per_mV {pub: in};
    var K_i: mM {pub: in};
    var Na_i: mM {pub: in};
    var Fjn: dimensionless {pub: in};
    var V: mV {pub: in};
    var Fsl: dimensionless {pub: in};
    var AF: dimensionless {pub: in};
    var ISO: dimensionless {pub: in};
    var time: ms {pub: in};
    var iks_xs_inf: dimensionless {pub: in};
    var iks_xs_tau: ms {pub: in};
    EKs = 1.0{dimensionless}/FRT*ln((K_o+pNaK*Na_o)/(K_i+pNaK*Na_i));
    IKs = IKs_jn+IKs_sl;
    IKs_jn = Fjn*gKs_jn*sqr(xs)*(V-EKs);
    IKs_sl = Fsl*gKs_sl*sqr(xs)*(V-EKs);
    gKs_jn = (1.0{dimensionless}+AF+2.0{dimensionless}*ISO)*gKs_max;
    gKs_sl = (1.0{dimensionless}+AF+2.0{dimensionless}*ISO)*gKs_max;
    ode(xs, time) = (iks_xs_inf-xs)/iks_xs_tau;
  enddef;

  def comp iks_xs as
    var iks_xs_inf: dimensionless {pub: out};
    var iks_xs_tau: ms {pub: out};
    var ISO: dimensionless {pub: in};
    var V: mV {pub: in};
    iks_xs_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+40.0{mV}*ISO+3.8{mV})/14.25{mV}));
    iks_xs_tau = 990.1{ms}/(1.0{dimensionless}+exp(-(V+40.0{mV}*ISO+2.436{mV})/14.12{mV}));
  enddef;

  def comp ikur as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_ultrarapid_delayed_rectifier_potassium_current
    var IKur: A_per_F {pub: out};
    var gKur: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_ultrarapid_delayed_rectifier_potassium_current_conductance
    var gKur_max: mS_per_uF {init: 0.045};
    var ikur_r: dimensionless {init: 3.93548562883350357e-04};
    var s: dimensionless {init: 9.58234428284286399e-01};
    var V: mV {pub: in};
    var EK: mV {pub: in};
    var AF: dimensionless {pub: in};
    var ISO: dimensionless {pub: in};
    var RA: dimensionless {pub: in};
    var time: ms {pub: in};
    var ikur_r_inf: dimensionless {pub: in};
    var ikur_r_tau: ms {pub: in};
    var ikur_s_inf: dimensionless {pub: in};
    var ikur_s_tau: ms {pub: in};
    IKur = gKur*ikur_r*s*(V-EK);
    gKur = (1.0{dimensionless}-0.5{dimensionless}*AF)*(1.0{dimensionless}+2.0{dimensionless}*ISO)*(1.0{dimensionless}+0.2{dimensionless}*RA)*gKur_max;
    ode(ikur_r, time) = (ikur_r_inf-ikur_r)/ikur_r_tau;
    ode(s, time) = (ikur_s_inf-s)/ikur_s_tau;
  enddef;

  def comp ikur_ikur_r as
    var ikur_r_inf: dimensionless {pub: out};
    var ikur_r_tau: ms {pub: out};
    var V: mV {pub: in};
    ikur_r_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+6.0{mV})/(-8.6{mV})));
    ikur_r_tau = 9.0{ms}/(1.0{dimensionless}+exp((V+5.0{mV})/12.0{mV}))+0.5{ms};
  enddef;

  def comp ikur_s as
    var ikur_s_inf: dimensionless {pub: out};
    var ikur_s_tau: ms {pub: out};
    var V: mV {pub: in};
    ikur_s_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+7.5{mV})/10.0{mV}));
    ikur_s_tau = 590.0{ms}/(1.0{dimensionless}+exp((V+60.0{mV})/10.0{mV}))+3050.0{ms};
  enddef;

  def comp ina as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var INa: A_per_F;
    var INa_jn: A_per_F {pub: out};
    var INa_sl: A_per_F {pub: out};
    var gNa: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var gNa_max: mS_per_uF {init: 23.0};
    var h: dimensionless {init: 3.15482710277587786e-01};
    var j: dimensionless {init: 2.48034071360795916e-01};
    var m: dimensionless {init: 1.89326933812916480e-02};
    var Fjn: dimensionless {pub: in};
    var V: mV {pub: in};
    var ENa_jn: mV {pub: in};
    var Fsl: dimensionless {pub: in};
    var ENa_sl: mV {pub: in};
    var AF: dimensionless {pub: in};
    var time: ms {pub: in};
    var ina_h_inf: dimensionless {pub: in};
    var ina_h_tau: ms {pub: in};
    var ina_j_inf: dimensionless {pub: in};
    var ina_j_tau: ms {pub: in};
    var ina_m_inf: dimensionless {pub: in};
    var ina_m_tau: ms {pub: in};
    INa = INa_jn+INa_sl;
    INa_jn = Fjn*gNa*pow(m, 3.0{dimensionless})*h*j*(V-ENa_jn);
    INa_sl = Fsl*gNa*pow(m, 3.0{dimensionless})*h*j*(V-ENa_sl);
    gNa = gNa_max*(1.0{dimensionless}-0.1{dimensionless}*AF);
    ode(h, time) = (ina_h_inf-h)/ina_h_tau;
    ode(j, time) = (ina_j_inf-j)/ina_j_tau;
    ode(m, time) = (ina_m_inf-m)/ina_m_tau;
  enddef;

  def comp ina_h as
    var ina_h_a: mS_per_uF;
    var ina_h_b: mS_per_uF;
    var ina_h_inf: dimensionless {pub: out};
    var ina_h_tau: ms {pub: out};
    var V: mV {pub: in};
    ina_h_a = sel(case V >= -40.0{mV}: 0.0{dimensionless}, otherwise: 0.057{dimensionless}*exp(-(V+80.0{mV})/6.8{mV}))*1.0{mS_per_uF};
    ina_h_b = sel(case V >= -40.0{mV}: 0.77{dimensionless}/(0.13{dimensionless}*(1.0{dimensionless}+exp(-(V+10.66{mV})/11.1{mV}))), otherwise: 2.7{dimensionless}*exp(0.079{per_mV}*V)+3.1{dimensionless}*pow(10.0{dimensionless}, 5.0{dimensionless})*exp(0.3485{per_mV}*V))*1.0{mS_per_uF};
    ina_h_inf = 1.0{dimensionless}/sqr(1.0{dimensionless}+exp((V+71.55{mV})/7.43{mV}));
    ina_h_tau = 1.0{dimensionless}/(ina_h_a+ina_h_b);
  enddef;

  def comp ina_j as
    var ina_j_a: mS_per_uF;
    var ina_j_b: mS_per_uF;
    var ina_j_inf: dimensionless {pub: out};
    var ina_j_tau: ms {pub: out};
    var V: mV {pub: in};
    ina_j_a = sel(case V >= -40.0{mV}: 0.0{dimensionless}, otherwise: (-2.5428{dimensionless}*pow(10.0{dimensionless}, 4.0{dimensionless})*exp(0.2444{per_mV}*V)-6.948{dimensionless}*pow(10.0{dimensionless}, -6.0{dimensionless})*exp(-0.04391{per_mV}*V))*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})))*1.0{per_mV})*1.0{mS_per_uF};
    ina_j_b = sel(case V >= -40.0{mV}: 0.6{dimensionless}*exp(0.057{per_mV}*V)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV}))), otherwise: 0.02424{dimensionless}*exp(-0.01052{per_mV}*V)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}))))*1.0{mS_per_uF};
    ina_j_inf = 1.0{dimensionless}/sqr(1.0{dimensionless}+exp((V+71.55{mV})/7.43{mV}));
    ina_j_tau = 1.0{dimensionless}/(ina_j_a+ina_j_b);
  enddef;

  def comp ina_m as
    var ina_m_inf: dimensionless {pub: out};
    var ina_m_tau: ms {pub: out};
    var V: mV {pub: in};
    ina_m_inf = 1.0{dimensionless}/sqr(1.0{dimensionless}+exp(-(56.86{mV}+V)/9.03{mV}));
    ina_m_tau = 0.1292{ms}*exp(-sqr((V+45.79{mV})/15.54{mV}))+0.06487{ms}*exp(-sqr((V-4.823{mV})/51.12{mV}));
  enddef;

  def comp inab as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current
    var INaB: A_per_F;
    var INaB_jn: A_per_F {pub: out};
    var INaB_sl: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_background_sodium_current_conductance
    var gNaB: mS_per_uF {init: 0.000597};
    var Fjn: dimensionless {pub: in};
    var V: mV {pub: in};
    var ENa_jn: mV {pub: in};
    var Fsl: dimensionless {pub: in};
    var ENa_sl: mV {pub: in};
    INaB = INaB_jn+INaB_sl;
    INaB_jn = Fjn*gNaB*(V-ENa_jn);
    INaB_sl = Fsl*gNaB*(V-ENa_sl);
  enddef;

  def comp inaca as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var INaCa: A_per_F;
    var INaCa_jn: A_per_F {pub: out};
    var INaCa_sl: A_per_F {pub: out};
    var IbarNCX: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var IbarNCX_max: A_per_F {init: 3.15};
    var Ka_jn: dimensionless;
    var Ka_sl: dimensionless;
    var Kdact: mM {init: 0.000384};
    var KmCai: mM {init: 0.00359, pub: out};
    var KmCao: mM {init: 1.3, pub: out};
    var KmNai: mM {init: 12.29, pub: out};
    var KmNao: mM {init: 87.5, pub: out};
    var Q10NCX: dimensionless {init: 1.57};
    var ksat: dimensionless {init: 0.27};
    var nu: dimensionless {init: 0.35, pub: out};
    var s1_jn: mol4_per_m12 {pub: in};
    var s2_jn: mol4_per_m12 {pub: in};
    var s3_jn: mol4_per_m12 {pub: in};
    var Fjn: dimensionless {pub: in};
    var V: mV {pub: in};
    var FRT: per_mV {pub: in};
    var Q: dimensionless {pub: in};
    var s1_sl: mol4_per_m12 {pub: in};
    var s2_sl: mol4_per_m12 {pub: in};
    var s3_sl: mol4_per_m12 {pub: in};
    var Fsl: dimensionless {pub: in};
    var AF: dimensionless {pub: in};
    var Ca_jn: mM {pub: in};
    var Ca_sl: mM {pub: in};
    INaCa = INaCa_jn+INaCa_sl;
    INaCa_jn = Fjn*IbarNCX*pow(Q10NCX, Q)*Ka_jn*(s1_jn-s2_jn)/s3_jn/(1.0{dimensionless}+ksat*exp((nu-1.0{dimensionless})*V*FRT));
    INaCa_sl = Fsl*IbarNCX*pow(Q10NCX, Q)*Ka_sl*(s1_sl-s2_sl)/s3_sl/(1.0{dimensionless}+ksat*exp((nu-1.0{dimensionless})*V*FRT));
    IbarNCX = (1.0{dimensionless}+0.4{dimensionless}*AF)*IbarNCX_max;
    Ka_jn = 1.0{dimensionless}/(1.0{dimensionless}+sqr(Kdact/Ca_jn));
    Ka_sl = 1.0{dimensionless}/(1.0{dimensionless}+sqr(Kdact/Ca_sl));
  enddef;

  def comp inaca_INaCa_jn as
    var s1_jn: mol4_per_m12 {pub: out};
    var s2_jn: mol4_per_m12 {pub: out};
    var s3_jn: mol4_per_m12 {pub: out};
    var nu: dimensionless {pub: in};
    var Ca_o: mM {pub: in};
    var V: mV {pub: in};
    var FRT: per_mV {pub: in};
    var Na_jn: mM {pub: in};
    var Ca_jn: mM {pub: in};
    var Na_o: mM {pub: in};
    var KmCai: mM {pub: in};
    var KmCao: mM {pub: in};
    var KmNai: mM {pub: in};
    var KmNao: mM {pub: in};
    s1_jn = exp(nu*V*FRT)*pow(Na_jn, 3.0{dimensionless})*Ca_o;
    s2_jn = exp((nu-1.0{dimensionless})*V*FRT)*pow(Na_o, 3.0{dimensionless})*Ca_jn;
    s3_jn = KmCai*pow(Na_o, 3.0{dimensionless})*(1.0{dimensionless}+pow(Na_jn/KmNai, 3.0{dimensionless}))+pow(KmNao, 3.0{dimensionless})*Ca_jn*(1.0{dimensionless}+Ca_jn/KmCai)+KmCao*pow(Na_jn, 3.0{dimensionless})+pow(Na_jn, 3.0{dimensionless})*Ca_o+pow(Na_o, 3.0{dimensionless})*Ca_jn;
  enddef;

  def comp inaca_INaCa_sl as
    var s1_sl: mol4_per_m12 {pub: out};
    var s2_sl: mol4_per_m12 {pub: out};
    var s3_sl: mol4_per_m12 {pub: out};
    var nu: dimensionless {pub: in};
    var Ca_o: mM {pub: in};
    var V: mV {pub: in};
    var FRT: per_mV {pub: in};
    var Na_sl: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var Na_o: mM {pub: in};
    var KmCai: mM {pub: in};
    var KmCao: mM {pub: in};
    var KmNai: mM {pub: in};
    var KmNao: mM {pub: in};
    s1_sl = exp(nu*V*FRT)*pow(Na_sl, 3.0{dimensionless})*Ca_o;
    s2_sl = exp((nu-1.0{dimensionless})*V*FRT)*pow(Na_o, 3.0{dimensionless})*Ca_sl;
    s3_sl = KmCai*pow(Na_o, 3.0{dimensionless})*(1.0{dimensionless}+pow(Na_sl/KmNai, 3.0{dimensionless}))+pow(KmNao, 3.0{dimensionless})*Ca_sl*(1.0{dimensionless}+Ca_sl/KmCai)+KmCao*pow(Na_sl, 3.0{dimensionless})+pow(Na_sl, 3.0{dimensionless})*Ca_o+pow(Na_o, 3.0{dimensionless})*Ca_sl;
  enddef;

  def comp inak as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
    var INaK: A_per_F {pub: out};
    var INaK_jn: A_per_F {pub: out};
    var INaK_sl: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current_permeability
    var IbarNaK: A_per_F {init: 1.26};
    var KmKo: mM {init: 1.5};
    var KmNaip: mM;
    var fnak: dimensionless;
    var sigma: dimensionless;
    var K_o: mM {pub: in};
    var Fjn: dimensionless {pub: in};
    var Na_jn: mM {pub: in};
    var Fsl: dimensionless {pub: in};
    var Na_sl: mM {pub: in};
    var ISO: dimensionless {pub: in};
    var V: mV {pub: in};
    var FRT: per_mV {pub: in};
    var Na_o: mM {pub: in};
    INaK = INaK_jn+INaK_sl;
    INaK_jn = Fjn*IbarNaK*fnak*K_o/(1.0{dimensionless}+pow(KmNaip/Na_jn, 4.0{dimensionless}))/(K_o+KmKo);
    INaK_sl = Fsl*IbarNaK*fnak*K_o/(1.0{dimensionless}+pow(KmNaip/Na_sl, 4.0{dimensionless}))/(K_o+KmKo);
    KmNaip = 11.0{mM}*(1.0{dimensionless}-0.25{dimensionless}*ISO);
    fnak = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FRT)+0.0365{dimensionless}*sigma*exp(-V*FRT));
    sigma = (exp(Na_o/67.3{mM})-1.0{dimensionless})/7.0{dimensionless};
  enddef;

  def comp inal as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current
    var INaL: A_per_F;
    var INaL_jn: A_per_F {pub: out};
    var INaL_sl: A_per_F {pub: out};
    var gNaL: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current_conductance
    var gNaL_max: mS_per_uF {init: 0.0025};
    var hl: dimensionless {init: 3.79829335413739144e-02};
    var ml: dimensionless {init: 1.01974216400706526e-02};
    var Fjn: dimensionless {pub: in};
    var V: mV {pub: in};
    var ENa_jn: mV {pub: in};
    var Fsl: dimensionless {pub: in};
    var ENa_sl: mV {pub: in};
    var AF: dimensionless {pub: in};
    var time: ms {pub: in};
    var inal_hl_inf: dimensionless {pub: in};
    var inal_hl_tau: ms {pub: in};
    var inal_ml_a: mS_per_uF {pub: in};
    var inal_ml_b: mS_per_uF {pub: in};
    INaL = INaL_jn+INaL_sl;
    INaL_jn = Fjn*gNaL*pow(ml, 3.0{dimensionless})*hl*(V-ENa_jn);
    INaL_sl = Fsl*gNaL*pow(ml, 3.0{dimensionless})*hl*(V-ENa_sl);
    gNaL = gNaL_max*AF;
    ode(hl, time) = (inal_hl_inf-hl)/inal_hl_tau;
    ode(ml, time) = inal_ml_a*(1.0{dimensionless}-ml)-inal_ml_b*ml;
  enddef;

  def comp inal_hl as
    var inal_hl_inf: dimensionless {pub: out};
    var inal_hl_tau: ms {init: 600.0, pub: out};
    var V: mV {pub: in};
    inal_hl_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+91.0{mV})/6.1{mV}));
  enddef;

  def comp inal_ml as
    var inal_ml_a: mS_per_uF {pub: out};
    var inal_ml_b: mS_per_uF {pub: out};
    var V: mV {pub: in};
    inal_ml_a = 0.32{per_mV_per_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    inal_ml_b = 0.08{mS_per_uF}*exp(-V/11.0{mV});
  enddef;

  def comp ion as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Ca_o: mM {init: 1.8, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_chloride_concentration
    var Cl_i: mM {init: 15.0, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_chloride_concentration
    var Cl_o: mM {init: 150.0, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var K_o: mM {init: 5.4, pub: out};
    var Mg_i: mM {init: 1.0, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Na_o: mM {init: 140.0, pub: out};
  enddef;

  def comp ipca as
    var IbarSLCaP: A_per_F {init: 0.0471};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var IpCa: A_per_F;
    var IpCa_jn: A_per_F {pub: out};
    var IpCa_sl: A_per_F {pub: out};
    var KmPCa: mM {init: 0.0005, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current_conductance
    var Q10SLCaP: dimensionless {init: 2.35};
    var ipca_IpCa_jn_a: dimensionless {pub: in};
    var ipca_IpCa_jn_b: dimensionless {pub: in};
    var Fjn: dimensionless {pub: in};
    var Q: dimensionless {pub: in};
    var ipca_IpCa_sl_a: dimensionless {pub: in};
    var ipca_IpCa_sl_b: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    IpCa = IpCa_jn+IpCa_sl;
    IpCa_jn = Fjn*pow(Q10SLCaP, Q)*IbarSLCaP*ipca_IpCa_jn_a/(ipca_IpCa_jn_a+ipca_IpCa_jn_b);
    IpCa_sl = Fsl*pow(Q10SLCaP, Q)*IbarSLCaP*ipca_IpCa_sl_a/(ipca_IpCa_sl_a+ipca_IpCa_sl_b);
  enddef;

  def comp ipca_IpCa_jn as
    var ipca_IpCa_jn_a: dimensionless {pub: out};
    var ipca_IpCa_jn_b: dimensionless {pub: out};
    var Ca_jn: mM {pub: in};
    var KmPCa: mM {pub: in};
    ipca_IpCa_jn_a = pow(Ca_jn*1.0{m3_per_mol}, 1.6{dimensionless});
    ipca_IpCa_jn_b = pow(KmPCa*1.0{m3_per_mol}, 1.6{dimensionless});
  enddef;

  def comp ipca_IpCa_sl as
    var ipca_IpCa_sl_a: dimensionless {pub: out};
    var ipca_IpCa_sl_b: dimensionless {pub: out};
    var Ca_sl: mM {pub: in};
    var KmPCa: mM {pub: in};
    ipca_IpCa_sl_a = pow(Ca_sl*1.0{m3_per_mol}, 1.6{dimensionless});
    ipca_IpCa_sl_b = pow(KmPCa*1.0{m3_per_mol}, 1.6{dimensionless});
  enddef;

  def comp ito as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current
    var Ito: A_per_F {pub: out};
    var gto: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_transient_outward_current_conductance
    var gto_max: mS_per_uF {init: 0.165};
    var x: dimensionless {init: 1.37939236359928058e-03};
    var y: dimensionless {init: 9.45874848392074696e-01};
    var V: mV {pub: in};
    var EK: mV {pub: in};
    var AF: dimensionless {pub: in};
    var time: ms {pub: in};
    var ito_x_inf: dimensionless {pub: in};
    var ito_x_tau: ms {pub: in};
    var ito_y_inf: dimensionless {pub: in};
    var ito_y_tau: ms {pub: in};
    Ito = gto*x*y*(V-EK);
    gto = (1.0{dimensionless}-0.7{dimensionless}*AF)*gto_max;
    ode(x, time) = (ito_x_inf-x)/ito_x_tau;
    ode(y, time) = (ito_y_inf-y)/ito_y_tau;
  enddef;

  def comp ito_x as
    var ito_x_inf: dimensionless {pub: out};
    var ito_x_tau: ms {pub: out};
    var V: mV {pub: in};
    ito_x_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+1.0{mV})/11.0{mV}));
    ito_x_tau = 3.5{ms}*exp(-sqr(V/30.0{mV}))+1.5{ms};
  enddef;

  def comp ito_y as
    var ito_y_inf: dimensionless {pub: out};
    var ito_y_tau: ms {pub: out};
    var V: mV {pub: in};
    ito_y_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+40.5{mV})/11.5{mV}));
    ito_y_tau = 25.635{ms}*exp(-sqr((V+52.45{mV})/15.8827{mV}))+24.14{ms};
  enddef;

  def comp junc as
    var Fjn: dimensionless {init: 0.11, pub: out};
    var Fjn_CaL: dimensionless {init: 0.9, pub: out};
    var Fsl: dimensionless {pub: out};
    var Fsl_CaL: dimensionless {pub: out};
    Fsl = 1.0{dimensionless}-Fjn;
    Fsl_CaL = 1.0{dimensionless}-Fjn_CaL;
  enddef;

  def comp membrane as
    var ICa_tot: A_per_F;
    var ICl_tot: A_per_F;
    var INa_tot: A_per_F;
    var I_tot: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {init: -7.34336366728778671e+01, pub: out};
    var ICa_tot_jn: A_per_F {pub: in};
    var ICa_tot_sl: A_per_F {pub: in};
    var IClB: A_per_F {pub: in};
    var IClCa: A_per_F {pub: in};
    var INa_tot_jn: A_per_F {pub: in};
    var INa_tot_sl: A_per_F {pub: in};
    var IK_tot: A_per_F {pub: in};
    var time: ms {pub: in};
    var I_stim: A_per_F {pub: in};
    ICa_tot = ICa_tot_jn+ICa_tot_sl;
    ICl_tot = IClCa+IClB;
    INa_tot = INa_tot_jn+INa_tot_sl;
    I_tot = INa_tot+ICl_tot+ICa_tot+IK_tot;
    ode(V, time) = -(I_tot+I_stim);
  enddef;

  def comp nernst as
    var ECa_jn: mV {pub: out};
    var ECa_sl: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#chloride_reversal_potential
    var ECl: mV {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var EK: mV {pub: out};
    var ENa_jn: mV {pub: out};
    var ENa_sl: mV {pub: out};
    var Ca_jn: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FRT: per_mV {pub: in};
    var Ca_sl: mM {pub: in};
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_jn: mM {pub: in};
    var Na_sl: mM {pub: in};
    ECa_jn = 1.0{dimensionless}/FRT/2.0{dimensionless}*ln(Ca_o/Ca_jn);
    ECa_sl = 1.0{dimensionless}/FRT/2.0{dimensionless}*ln(Ca_o/Ca_sl);
    ECl = 1.0{dimensionless}/FRT*ln(Cl_i/Cl_o);
    EK = 1.0{dimensionless}/FRT*ln(K_o/K_i);
    ENa_jn = 1.0{dimensionless}/FRT*ln(Na_o/Na_jn);
    ENa_sl = 1.0{dimensionless}/FRT*ln(Na_o/Na_sl);
  enddef;

  def comp phys as
    var F: C_per_mol {init: 96485.0, pub: out};
    var FRT: per_mV {pub: out};
    var Q: dimensionless {pub: out};
    var R: mJ_per_mol_per_K {init: 8314.0};
    var T: kelvin {init: 310.0};
    FRT = F/R/T;
    Q = (T-310.0{kelvin})/10.0{kelvin};
  enddef;

  def comp potassium as
    var IK_tot: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var K_i: mM {init: 120.0, pub: out};
    var ICaL_K: A_per_F {pub: in};
    var IK1: A_per_F {pub: in};
    var IKp: A_per_F {pub: in};
    var IKr: A_per_F {pub: in};
    var IKs: A_per_F {pub: in};
    var IKur: A_per_F {pub: in};
    var INaK: A_per_F {pub: in};
    var Ito: A_per_F {pub: in};
    var time: ms {pub: in};
    IK_tot = Ito+IKr+IKs+IK1-2.0{dimensionless}*INaK+ICaL_K+IKp+IKur;
    ode(K_i, time) = 0.0{mM_per_ms};
  enddef;

  def comp ryr as
    var J_SRCarel: mM_per_ms {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var J_SR_leak: mM_per_ms {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var J_SR_leak_max: mS_per_uF {init: 5.348e-06};
    var J_serca: mM_per_ms {pub: out};
    var Kmf: mM;
    var Kmr: mM {init: 1.7};
    var MaxSR: dimensionless {init: 15.0};
    var MinSR: dimensionless {init: 1.0};
    var Q10SRCaP: dimensionless {init: 2.6};
    var RI: dimensionless;
    var Vmax_SRCaP: mM_per_ms {init: 0.0053114};
    var ec50SR: mM {init: 0.45};
    var hillSRCaP: dimensionless {init: 1.787};
    var i: dimensionless {init: 5.01323282772066123e-07};
    var kCaSR: dimensionless;
    var kiCa: per_mM_per_ms {init: 0.5};
    var kiSRCa: per_mM_per_ms;
    var kim: mS_per_uF {init: 0.005};
    var koCa: per_mM2_per_ms;
    var koSRCa: per_mM2_per_ms;
    var kom: mS_per_uF {init: 0.06};
    var ks: mS_per_uF {init: 25.0};
    var o: dimensionless {init: 2.01567245823636694e-06};
    var ryr_r: dimensionless {init: 8.00819151705148946e-01};
    var Ca_jn: mM {pub: in};
    var Ca_sr: mM {pub: in};
    var AF: dimensionless {pub: in};
    var Ca_i: mM {pub: in};
    var Q: dimensionless {pub: in};
    var ISO: dimensionless {pub: in};
    var time: ms {pub: in};
    J_SRCarel = ks*o*(Ca_sr-Ca_jn);
    J_SR_leak = (1.0{dimensionless}+0.25{dimensionless}*AF)*(Ca_sr-Ca_jn)*J_SR_leak_max;
    J_serca = pow(Q10SRCaP, Q)*Vmax_SRCaP*(pow(Ca_i/Kmf, hillSRCaP)-pow(Ca_sr/Kmr, hillSRCaP))/(1.0{dimensionless}+pow(Ca_i/Kmf, hillSRCaP)+pow(Ca_sr/Kmr, hillSRCaP));
    Kmf = (2.5{dimensionless}-1.25{dimensionless}*ISO)*0.000246{mM};
    RI = 1.0{dimensionless}-ryr_r-o-i;
    ode(i, time) = kiSRCa*Ca_jn*o-kim*i-(kom*i-koSRCa*sqr(Ca_jn)*RI);
    kCaSR = MaxSR-(MaxSR-MinSR)/(1.0{dimensionless}+pow(ec50SR/Ca_sr, 2.5{dimensionless}));
    kiSRCa = kiCa*kCaSR;
    koCa = (10.0{dimensionless}+20.0{dimensionless}*AF+10.0{dimensionless}*ISO*(1.0{dimensionless}-AF))*1.0{per_mM2_per_ms};
    koSRCa = koCa/kCaSR;
    ode(o, time) = koSRCa*sqr(Ca_jn)*ryr_r-kom*o-(kiSRCa*Ca_jn*o-kim*i);
    ode(ryr_r, time) = kim*RI-kiSRCa*Ca_jn*ryr_r-(koSRCa*sqr(Ca_jn)*ryr_r-kom*o);
  enddef;

  def comp sodium as
    var INa_tot_jn: A_per_F {pub: out};
    var INa_tot_sl: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Na_i: mM {init: 9.15199678386256998e+00, pub: out};
    var Na_jn: mM {init: 9.15153381546177336e+00, pub: out};
    var Na_sl: mM {init: 9.15182798281732346e+00, pub: out};
    var ICaL_Na_jn: A_per_F {pub: in};
    var INa_jn: A_per_F {pub: in};
    var INaB_jn: A_per_F {pub: in};
    var INaCa_jn: A_per_F {pub: in};
    var INaK_jn: A_per_F {pub: in};
    var INaL_jn: A_per_F {pub: in};
    var ICaL_Na_sl: A_per_F {pub: in};
    var INa_sl: A_per_F {pub: in};
    var INaB_sl: A_per_F {pub: in};
    var INaCa_sl: A_per_F {pub: in};
    var INaK_sl: A_per_F {pub: in};
    var INaL_sl: A_per_F {pub: in};
    var time: ms {pub: in};
    var JNa_slmyo: m3_per_s {pub: in};
    var Vmyo: liter {pub: in};
    var NaB_jn: mM {pub: in};
    var C: farad {pub: in};
    var JNa_jnsl: m3_per_s {pub: in};
    var Vjn: liter {pub: in};
    var F: C_per_mol {pub: in};
    var NaB_sl: mM {pub: in};
    var Vsl: liter {pub: in};
    INa_tot_jn = INa_jn+INaB_jn+3.0{dimensionless}*INaCa_jn+3.0{dimensionless}*INaK_jn+ICaL_Na_jn+INaL_jn;
    INa_tot_sl = INa_sl+INaB_sl+3.0{dimensionless}*INaCa_sl+3.0{dimensionless}*INaK_sl+ICaL_Na_sl+INaL_sl;
    ode(Na_i, time) = JNa_slmyo/Vmyo*(Na_sl-Na_i);
    ode(Na_jn, time) = -INa_tot_jn*C/(Vjn*F)+JNa_jnsl/Vjn*(Na_sl-Na_jn)-ode(NaB_jn, time);
    ode(Na_sl, time) = -INa_tot_sl*C/(Vsl*F)+JNa_jnsl/Vsl*(Na_jn-Na_sl)+JNa_slmyo/Vsl*(Na_i-Na_sl)-ode(NaB_sl, time);
  enddef;

  def comp stimulus as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var I_stim: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var amplitude: A_per_F {init: -12.5};
    var pace: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: ms {init: 5.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_offset: ms {init: 50.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {init: 1000.0};
    var time: ms {pub: in};
    I_stim = pace*amplitude;
    pace = sel
      case time-stim_offset-stim_period*floor((time-stim_offset)/stim_period) < stim_duration:
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
  enddef;
  def map between buffca and geom for
    vars Vjn and Vjn;
    vars Vmyo and Vmyo;
    vars Vsl and Vsl;
  enddef;
  def map between buffca and calcium for
    vars Ca_i and Ca_i;
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
    vars J_CaB_cytosol and J_CaB_cytosol;
    vars J_CaB_jntion and J_CaB_jntion;
    vars J_CaB_sl and J_CaB_sl;
  enddef;
  def map between buffca and engine for
    vars time and time;
  enddef;
  def map between buffca and ion for
    vars Mg_i and Mg_i;
  enddef;
  def map between buffca and cell for
    vars ISO and ISO;
  enddef;
  def map between buffna and engine for
    vars time and time;
  enddef;
  def map between buffna and sodium for
    vars Na_jn and Na_jn;
    vars Na_sl and Na_sl;
    vars NaB_jn and NaB_jn;
    vars NaB_sl and NaB_sl;
  enddef;
  def map between calcium and engine for
    vars time and time;
  enddef;
  def map between calcium and geom for
    vars JCa_slmyo and JCa_slmyo;
    vars Vmyo and Vmyo;
    vars Vsr and Vsr;
    vars JCa_jnsl and JCa_jnsl;
    vars Vjn and Vjn;
    vars Vsl and Vsl;
  enddef;
  def map between calcium and ryr for
    vars J_serca and J_serca;
    vars J_SRCarel and J_SRCarel;
    vars J_SR_leak and J_SR_leak;
    vars Ca_jn and Ca_jn;
    vars Ca_sr and Ca_sr;
    vars Ca_i and Ca_i;
  enddef;
  def map between calcium and cell for
    vars C and C;
  enddef;
  def map between calcium and phys for
    vars F and F;
  enddef;
  def map between calcium and calcium_Csqn for
    vars Bmax_Csqn and Bmax_Csqn;
    vars koff_csqn and koff_csqn;
    vars kon_csqn and kon_csqn;
  enddef;
  def map between calcium_Csqn and geom for
    vars Vmyo and Vmyo;
    vars Vsr and Vsr;
  enddef;
  def map between calcium and icab for
    vars ICaB_jn and ICaB_jn;
    vars ICaB_sl and ICaB_sl;
  enddef;
  def map between calcium and ical for
    vars ICaL_Ca_jn and ICaL_Ca_jn;
    vars ICaL_Ca_sl and ICaL_Ca_sl;
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
  enddef;
  def map between calcium and inaca for
    vars INaCa_jn and INaCa_jn;
    vars INaCa_sl and INaCa_sl;
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
  enddef;
  def map between calcium and ipca for
    vars IpCa_jn and IpCa_jn;
    vars IpCa_sl and IpCa_sl;
  enddef;
  def map between icab and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between icab and membrane for
    vars V and V;
  enddef;
  def map between icab and nernst for
    vars ECa_jn and ECa_jn;
    vars ECa_sl and ECa_sl;
  enddef;
  def map between ical and junc for
    vars Fjn_CaL and Fjn_CaL;
    vars Fsl_CaL and Fsl_CaL;
  enddef;
  def map between ical and phys for
    vars Q and Q;
    vars F and F;
    vars FRT and FRT;
  enddef;
  def map between engine and ical for
    vars time and time;
  enddef;
  def map between ical and ical_d for
    vars ical_d_inf and ical_d_inf;
    vars ical_d_tau and ical_d_tau;
  enddef;
  def map between cell and ical_d for
    vars ISO and ISO;
  enddef;
  def map between ical_d and membrane for
    vars V and V;
  enddef;
  def map between ical and ical_f for
    vars ical_f_inf and ical_f_inf;
    vars ical_f_tau and ical_f_tau;
  enddef;
  def map between cell and ical_f for
    vars ISO and ISO;
  enddef;
  def map between ical_f and membrane for
    vars V and V;
  enddef;
  def map between ical and ion for
    vars Ca_o and Ca_o;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between ical and membrane for
    vars V and V;
  enddef;
  def map between ical and potassium for
    vars K_i and K_i;
    vars ICaL_K and ICaL_K;
  enddef;
  def map between ical and sodium for
    vars Na_jn and Na_jn;
    vars Na_sl and Na_sl;
    vars ICaL_Na_jn and ICaL_Na_jn;
    vars ICaL_Na_sl and ICaL_Na_sl;
  enddef;
  def map between cell and ical for
    vars AF and AF;
    vars ISO and ISO;
  enddef;
  def map between iclb and membrane for
    vars V and V;
    vars IClB and IClB;
  enddef;
  def map between iclb and nernst for
    vars ECl and ECl;
  enddef;
  def map between calcium and iclca for
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
  enddef;
  def map between iclca and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between iclca and membrane for
    vars V and V;
    vars IClCa and IClCa;
  enddef;
  def map between iclca and nernst for
    vars ECl and ECl;
  enddef;
  def map between ik1 and membrane for
    vars V and V;
  enddef;
  def map between ik1 and nernst for
    vars EK and EK;
  enddef;
  def map between cell and ik1 for
    vars AF and AF;
  enddef;
  def map between ik1 and ion for
    vars K_o and K_o;
  enddef;
  def map between ik1 and ik1_ik1_inf for
    vars ik1_inf_a and ik1_inf_a;
    vars ik1_inf_b and ik1_inf_b;
  enddef;
  def map between ik1_ik1_inf and membrane for
    vars V and V;
  enddef;
  def map between ik1_ik1_inf and nernst for
    vars EK and EK;
  enddef;
  def map between ikp and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between ikp and membrane for
    vars V and V;
  enddef;
  def map between ikp and nernst for
    vars EK and EK;
  enddef;
  def map between ikr and membrane for
    vars V and V;
  enddef;
  def map between ikr and nernst for
    vars EK and EK;
  enddef;
  def map between ikr and ion for
    vars K_o and K_o;
  enddef;
  def map between engine and ikr for
    vars time and time;
  enddef;
  def map between ikr and ikr_xr for
    vars ikr_xr_inf and ikr_xr_inf;
    vars ikr_xr_tau and ikr_xr_tau;
  enddef;
  def map between ikr_xr and membrane for
    vars V and V;
  enddef;
  def map between iks and ion for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between iks and phys for
    vars FRT and FRT;
  enddef;
  def map between iks and potassium for
    vars K_i and K_i;
    vars IKs and IKs;
  enddef;
  def map between iks and sodium for
    vars Na_i and Na_i;
  enddef;
  def map between iks and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between iks and membrane for
    vars V and V;
  enddef;
  def map between cell and iks for
    vars AF and AF;
    vars ISO and ISO;
  enddef;
  def map between engine and iks for
    vars time and time;
  enddef;
  def map between iks and iks_xs for
    vars iks_xs_inf and iks_xs_inf;
    vars iks_xs_tau and iks_xs_tau;
  enddef;
  def map between cell and iks_xs for
    vars ISO and ISO;
  enddef;
  def map between iks_xs and membrane for
    vars V and V;
  enddef;
  def map between ikur and membrane for
    vars V and V;
  enddef;
  def map between ikur and nernst for
    vars EK and EK;
  enddef;
  def map between cell and ikur for
    vars AF and AF;
    vars ISO and ISO;
    vars RA and RA;
  enddef;
  def map between engine and ikur for
    vars time and time;
  enddef;
  def map between ikur and ikur_ikur_r for
    vars ikur_r_inf and ikur_r_inf;
    vars ikur_r_tau and ikur_r_tau;
  enddef;
  def map between ikur_ikur_r and membrane for
    vars V and V;
  enddef;
  def map between ikur and ikur_s for
    vars ikur_s_inf and ikur_s_inf;
    vars ikur_s_tau and ikur_s_tau;
  enddef;
  def map between ikur_s and membrane for
    vars V and V;
  enddef;
  def map between ina and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between ina and membrane for
    vars V and V;
  enddef;
  def map between ina and nernst for
    vars ENa_jn and ENa_jn;
    vars ENa_sl and ENa_sl;
  enddef;
  def map between cell and ina for
    vars AF and AF;
  enddef;
  def map between engine and ina for
    vars time and time;
  enddef;
  def map between ina and ina_h for
    vars ina_h_inf and ina_h_inf;
    vars ina_h_tau and ina_h_tau;
  enddef;
  def map between ina_h and membrane for
    vars V and V;
  enddef;
  def map between ina and ina_j for
    vars ina_j_inf and ina_j_inf;
    vars ina_j_tau and ina_j_tau;
  enddef;
  def map between ina_j and membrane for
    vars V and V;
  enddef;
  def map between ina and ina_m for
    vars ina_m_inf and ina_m_inf;
    vars ina_m_tau and ina_m_tau;
  enddef;
  def map between ina_m and membrane for
    vars V and V;
  enddef;
  def map between inab and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between inab and membrane for
    vars V and V;
  enddef;
  def map between inab and nernst for
    vars ENa_jn and ENa_jn;
    vars ENa_sl and ENa_sl;
  enddef;
  def map between inaca and inaca_INaCa_jn for
    vars s1_jn and s1_jn;
    vars s2_jn and s2_jn;
    vars s3_jn and s3_jn;
    vars nu and nu;
    vars KmCai and KmCai;
    vars KmCao and KmCao;
    vars KmNai and KmNai;
    vars KmNao and KmNao;
  enddef;
  def map between inaca and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between inaca and membrane for
    vars V and V;
  enddef;
  def map between inaca and phys for
    vars FRT and FRT;
    vars Q and Q;
  enddef;
  def map between inaca_INaCa_jn and ion for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between inaca_INaCa_jn and membrane for
    vars V and V;
  enddef;
  def map between inaca_INaCa_jn and phys for
    vars FRT and FRT;
  enddef;
  def map between inaca_INaCa_jn and sodium for
    vars Na_jn and Na_jn;
  enddef;
  def map between calcium and inaca_INaCa_jn for
    vars Ca_jn and Ca_jn;
  enddef;
  def map between inaca and inaca_INaCa_sl for
    vars s1_sl and s1_sl;
    vars s2_sl and s2_sl;
    vars s3_sl and s3_sl;
    vars nu and nu;
    vars KmCai and KmCai;
    vars KmCao and KmCao;
    vars KmNai and KmNai;
    vars KmNao and KmNao;
  enddef;
  def map between inaca_INaCa_sl and ion for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between inaca_INaCa_sl and membrane for
    vars V and V;
  enddef;
  def map between inaca_INaCa_sl and phys for
    vars FRT and FRT;
  enddef;
  def map between inaca_INaCa_sl and sodium for
    vars Na_sl and Na_sl;
  enddef;
  def map between calcium and inaca_INaCa_sl for
    vars Ca_sl and Ca_sl;
  enddef;
  def map between cell and inaca for
    vars AF and AF;
  enddef;
  def map between inak and ion for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between inak and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between inak and sodium for
    vars Na_jn and Na_jn;
    vars Na_sl and Na_sl;
    vars INaK_jn and INaK_jn;
    vars INaK_sl and INaK_sl;
  enddef;
  def map between cell and inak for
    vars ISO and ISO;
  enddef;
  def map between inak and membrane for
    vars V and V;
  enddef;
  def map between inak and phys for
    vars FRT and FRT;
  enddef;
  def map between inal and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between inal and membrane for
    vars V and V;
  enddef;
  def map between inal and nernst for
    vars ENa_jn and ENa_jn;
    vars ENa_sl and ENa_sl;
  enddef;
  def map between cell and inal for
    vars AF and AF;
  enddef;
  def map between engine and inal for
    vars time and time;
  enddef;
  def map between inal and inal_hl for
    vars inal_hl_inf and inal_hl_inf;
    vars inal_hl_tau and inal_hl_tau;
  enddef;
  def map between inal_hl and membrane for
    vars V and V;
  enddef;
  def map between inal and inal_ml for
    vars inal_ml_a and inal_ml_a;
    vars inal_ml_b and inal_ml_b;
  enddef;
  def map between inal_ml and membrane for
    vars V and V;
  enddef;
  def map between ipca and ipca_IpCa_jn for
    vars ipca_IpCa_jn_a and ipca_IpCa_jn_a;
    vars ipca_IpCa_jn_b and ipca_IpCa_jn_b;
    vars KmPCa and KmPCa;
  enddef;
  def map between ipca and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between ipca and phys for
    vars Q and Q;
  enddef;
  def map between calcium and ipca_IpCa_jn for
    vars Ca_jn and Ca_jn;
  enddef;
  def map between ipca and ipca_IpCa_sl for
    vars ipca_IpCa_sl_a and ipca_IpCa_sl_a;
    vars ipca_IpCa_sl_b and ipca_IpCa_sl_b;
    vars KmPCa and KmPCa;
  enddef;
  def map between calcium and ipca_IpCa_sl for
    vars Ca_sl and Ca_sl;
  enddef;
  def map between ito and membrane for
    vars V and V;
  enddef;
  def map between ito and nernst for
    vars EK and EK;
  enddef;
  def map between cell and ito for
    vars AF and AF;
  enddef;
  def map between engine and ito for
    vars time and time;
  enddef;
  def map between ito and ito_x for
    vars ito_x_inf and ito_x_inf;
    vars ito_x_tau and ito_x_tau;
  enddef;
  def map between ito_x and membrane for
    vars V and V;
  enddef;
  def map between ito and ito_y for
    vars ito_y_inf and ito_y_inf;
    vars ito_y_tau and ito_y_tau;
  enddef;
  def map between ito_y and membrane for
    vars V and V;
  enddef;
  def map between calcium and membrane for
    vars ICa_tot_jn and ICa_tot_jn;
    vars ICa_tot_sl and ICa_tot_sl;
  enddef;
  def map between membrane and sodium for
    vars INa_tot_jn and INa_tot_jn;
    vars INa_tot_sl and INa_tot_sl;
  enddef;
  def map between membrane and potassium for
    vars IK_tot and IK_tot;
  enddef;
  def map between engine and membrane for
    vars time and time;
  enddef;
  def map between membrane and stimulus for
    vars I_stim and I_stim;
  enddef;
  def map between calcium and nernst for
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
  enddef;
  def map between ion and nernst for
    vars Ca_o and Ca_o;
    vars Cl_i and Cl_i;
    vars Cl_o and Cl_o;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between nernst and phys for
    vars FRT and FRT;
  enddef;
  def map between nernst and potassium for
    vars K_i and K_i;
  enddef;
  def map between nernst and sodium for
    vars Na_jn and Na_jn;
    vars Na_sl and Na_sl;
  enddef;
  def map between ik1 and potassium for
    vars IK1 and IK1;
  enddef;
  def map between ikp and potassium for
    vars IKp and IKp;
  enddef;
  def map between ikr and potassium for
    vars IKr and IKr;
  enddef;
  def map between ikur and potassium for
    vars IKur and IKur;
  enddef;
  def map between inak and potassium for
    vars INaK and INaK;
  enddef;
  def map between ito and potassium for
    vars Ito and Ito;
  enddef;
  def map between engine and potassium for
    vars time and time;
  enddef;
  def map between cell and ryr for
    vars AF and AF;
    vars ISO and ISO;
  enddef;
  def map between phys and ryr for
    vars Q and Q;
  enddef;
  def map between engine and ryr for
    vars time and time;
  enddef;
  def map between ina and sodium for
    vars INa_jn and INa_jn;
    vars INa_sl and INa_sl;
  enddef;
  def map between inab and sodium for
    vars INaB_jn and INaB_jn;
    vars INaB_sl and INaB_sl;
  enddef;
  def map between inaca and sodium for
    vars INaCa_jn and INaCa_jn;
    vars INaCa_sl and INaCa_sl;
  enddef;
  def map between inal and sodium for
    vars INaL_jn and INaL_jn;
    vars INaL_sl and INaL_sl;
  enddef;
  def map between engine and sodium for
    vars time and time;
  enddef;
  def map between geom and sodium for
    vars JNa_slmyo and JNa_slmyo;
    vars Vmyo and Vmyo;
    vars JNa_jnsl and JNa_jnsl;
    vars Vjn and Vjn;
    vars Vsl and Vsl;
  enddef;
  def map between cell and sodium for
    vars C and C;
  enddef;
  def map between phys and sodium for
    vars F and F;
  enddef;
  def map between engine and stimulus for
    vars time and time;
  enddef;
enddef;
