// This CellML file was generated on 8/02/2008 at 5:48:49 at p.m. using:
//
// COR (0.9.31.863)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: The University of Auckland
// comment: FN Steven Niederer; This CellML model has been created by the author of the paper on which it is based. It has been curated to a high standard and is known to reproduce the published results in PCEnv and COR.
// created: W3CDTF 2008-02-02T00:00:00+13:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; s.niederer@gmail.com; Given Steven; Family Niederer
// reference: subject_type keyword; electrophysiology; cardiac
// simulation: endingValue 10000; nonstandard-pointDensity 10000
// reference: Pubmed_id 17369410; Given Steven; Family Niederer; Other A; Given Nicholas; Family Smith; Other P; title A Mathematical Model of the Slow Force Response to Stretch in Rat Ventricular Myocytes; volume 92; first_page 4030; title Biophysical Journal; W3CDTF 2007-06-01 00:00; last_page 4044
// comment: FN James Lawson; This cell model provides a descripition of the Electrophysiology, Calcium, pH and Mechanics of the rat ventricular myocte at room temperature. The model includes representations of length dependent channels NHE & AE and RyR, that can be turned on or off as desired. The model was used to demonstrate the importance of stretch activated channels in regulating the slow force response. It has also been used in tissue models and can be readily coupled to tissue deformation models (Niederer and Smith Progress in Biophysics and Molecular Biology 2007). The model uses Hinch 2004 (Biophysical Journal) Ca++ dynamics, Pandit 2001 rat electrophysiology and Niederer 2006 mechanics.
def model niederer_smith_2007 as
  // Model Status
  //
  // This model is known to run in both OpenCell and COR to reproduce the output shown in the publication.
  //
  // Model Structure
  //
  // ABSTRACT: We developed a model of the rat ventricular myocyte at room temperature to predict the relative effects of different mechanisms on the cause of the slow increase in force in response to a step change in muscle length. We performed simulations in the presence of stretch-dependent increases in flux through the Na+-H+ exchanger (NHE) and chloride-bicarbonate exchanger (AE), stretch-activated channels (SAC), and the stretch-dependent nitric oxide (NO) induced increased open probability of the ryanodine receptors to estimate the capacity of each mechanism to produce the slow force response (SFR). Inclusion of stretch-dependent NHE & AE, SACs, and stretch-dependent NO effects caused an increase in tension following 15 min of stretch of 0.87%, 32%, and 0%, respectively. Comparing [Ca2+]i dynamics before and after stretch in the presence of combinations of the three stretch-dependent elements, which produced significant SFR values (>20%), showed that the inclusion of stretch-dependent NO effects produced [Ca2+]i transients, which were not consistent with experimental results. Further simulations showed that in the presence of SACs and the absence of stretch-dependent NHE & AE inhibition of NHE attenuated the SFR, such that reduced SFR in the presence of NHE blockers does not indicate a stretch dependence of NHE. Rather, a functioning NHE is responsible for a portion of the SFR. Based on our simulations we estimate that in rat cardiac myocytes at room temperature SACs play a significant role in producing the SFR, potentially in the presence of stretch-dependent NHE & AE and that NO effects, if any, must involve more mechanisms than just increasing the open probability of ryanodine receptors.
  //
  // The complete original publication reference is cited below:
  //
  // A mathematical model of the slow force response to stretch in rat ventricular myocytes, Steven Niederer, Nicholas Smith, 2007. Biophysical Journal, 92 (11) 4030-4044, PubMed ID: 17369410 (http://www.ncbi.nlm.nih.gov/pubmed/17369410)
  //
  // reaction diagram
  //
  // Schematic representation of the mathematical model.
  def unit minute as
    unit second {pref: 2};
  enddef;
  def unit mM_per_ms_per_mm3 as
    unit mM;
    unit ms {expo: -1};
    unit mm {expo: -3};
  enddef;
  def unit per_ms3 as
    unit ms {expo: -3};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_min as
    unit minute {expo: -1};
  enddef;
  def unit micrometer as
    unit metre {pref: micro};
  enddef;
  def unit N_per_mm2 as
    unit newton;
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit mm as
    unit meter {pref: milli};
  enddef;
  def unit mm3 as
    unit mm {expo: 3};
  enddef;
  def unit mm2 as
    unit mm {expo: 2};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit mS as
    unit siemens {pref: milli};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit mm2 {expo: -1};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM_per_second as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mM3_per_ms as
    unit mM {expo: -3};
    unit ms {expo: -1};
  enddef;
  def unit mM4_per_ms as
    unit mM {expo: -4};
    unit ms {expo: -1};
  enddef;
  def unit mM_4 as
    unit mM {expo: -4};
  enddef;
  def unit mM3 as
    unit mM {expo: 3};
  enddef;
  def unit mM_4_uA as
    unit mM {expo: -4};
    unit uA;
  enddef;
  def unit uA_per_mm2 as
    unit uA;
    unit mm {expo: -2};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb {expo: -1};
    unit mole;
  enddef;
  def unit pico_litre as
    unit litre {pref: pico};
  enddef;
  def unit mm3_per_ms as
    unit mm3;
    unit per_ms;
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit per_mm as
    unit mm {expo: -1};
  enddef;
  def unit mm_per_ms as
    unit mm;
    unit ms {expo: -1};
  enddef;

  def comp strain_control as
    var NO_on: dimensionless {pub: out, init: 0};
    var pH_on: dimensionless {pub: out, init: 0};
    var SAC_on: dimensionless {pub: out, init: 0};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp cell_geom as
    var V_myo: mm3 {pub: out, init: 2.584e-5};
    var V_SR: mm3 {pub: out, init: 2.098e-6};
    var N: dimensionless {pub: out, init: 75000};
    var A_cap: mm2 {pub: out, init: 0.01534};
    var rho: per_mm {pub: out};
    rho = A_cap/V_myo;
  enddef;

  def comp membrane as
    var V: mV {pub: out, init: -80.5561112771341};
    var R: millijoule_per_mole_kelvin {pub: out, init: 8314.5};
    var T: kelvin {pub: out, init: 295};
    var F: coulomb_per_mole {pub: out, init: 96487};
    var CmF: uF {init: 0.0001};
    var Cm: uF_per_mm2;
    var time: ms {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_t: uA_per_mm2 {pub: in};
    var i_ss: uA_per_mm2 {pub: in};
    var i_f: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_Stim: uA_per_mm2 {pub: in};
    var I_CaL: uA_per_mm2 {pub: in};
    var I_NaCa: uA_per_mm2 {pub: in};
    var I_Cab: uA_per_mm2 {pub: in};
    var I_pCa: uA_per_mm2 {pub: in};
    var i_B_Na: uA_per_mm2 {pub: in};
    var i_B_K: uA_per_mm2 {pub: in};
    var I_SAC_Na: uA_per_mm2 {pub: in};
    var I_SAC_K: uA_per_mm2 {pub: in};
    var I_Ko: uA_per_mm2 {pub: in};
    var A_cap: mm2 {pub: in};
    var I_Cl: uA_per_mm2 {pub: in};
    var I_H: uA_per_mm2 {pub: in};
    Cm = CmF/A_cap;
    ode(V, time) = -(I_H+I_Cl+i_Na+I_CaL+i_t+i_ss+i_f+i_K1+I_Cab+I_SAC_Na+i_B_K+i_B_Na+I_Ko+I_SAC_K+i_NaK+I_NaCa+I_pCa+i_Stim)/Cm;
  enddef;

  def comp I_stimulus as
    var i_Stim: uA_per_mm2 {pub: out};
    var time: ms {pub: in};
    var stim_period: ms {init: 1000};
    var stim_duration: ms {init: 10};
    var stim_amplitude: uA {init: -0.0006};
    var A_cap: mm2 {pub: in};
    i_Stim = sel
      case (time-floor(time/stim_period)*stim_period >= 0{ms}) and (time-floor(time/stim_period)*stim_period <= stim_duration):
        stim_amplitude/A_cap;
      otherwise:
        0{uA};
    endsel;
  enddef;

  def comp SAC_current as
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    var E_K: mV {pub: in};
    var ExtensionRatio: dimensionless {pub: in};
    var g_SAC: mS {init: 4.1333e-7};
    var I_SAC_Na: uA_per_mm2 {pub: out};
    var I_SAC_K: uA_per_mm2 {pub: out};
    var I_SAC: uA_per_mm2 {pub: out};
    var A_cap: mm2 {pub: in};
    var gamma_SLSAC: dimensionless;
    var E_R: mV {init: -10};
    var r: dimensionless;
    var SAC_on: dimensionless {pub: in};
    gamma_SLSAC = sel
      case SAC_on == 1{dimensionless}:
        (ExtensionRatio-1{dimensionless})*10{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    r = -(E_R+85{mV})/(E_R-65{mV});
    I_SAC_Na = g_SAC*gamma_SLSAC*(V-E_Na)/A_cap*r;
    I_SAC_K = g_SAC*gamma_SLSAC*(V-E_K)/A_cap;
    I_SAC = I_SAC_K+I_SAC_Na;
  enddef;

  def comp KSA_current as
    var V: mV {pub: in};
    var E_K: mV {pub: in};
    var ExtensionRatio: dimensionless {pub: in};
    var g_Ko: mS {init: 1.2e-6};
    var A_cap: mm2 {pub: in};
    var gamma_SLKO: dimensionless;
    var I_Ko: uA_per_mm2 {pub: out};
    var SAC_on: dimensionless {pub: in};
    gamma_SLKO = sel
      case SAC_on == 1{dimensionless}:
        0.7{dimensionless}+(ExtensionRatio-1{dimensionless})*3{dimensionless};
      otherwise:
        0.7{dimensionless};
    endsel;
    I_Ko = g_Ko/(1{dimensionless}+exp(-(10{mV}+V)/45{mV}))*(V-E_K)*gamma_SLKO/A_cap;
  enddef;

  def comp sodium_current as
    var i_Na: uA_per_mm2 {pub: out};
    var E_Na: mV {pub: out};
    var g_Na: mS {init: 0.0008};
    var g_Na_endo: mS;
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    var A_cap: mm2 {pub: in};
    g_Na_endo = 1.33{dimensionless}*g_Na;
    E_Na = R*T/F*ln(Na_o/Na_i);
    i_Na = g_Na_endo*pow(m, 3{dimensionless})*h*j*(V-E_Na)/A_cap;
  enddef;

  def comp sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.00419283833975832};
    var m_infinity: dimensionless;
    var tau_m: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45{mV})/(-6.5{mV})));
    tau_m = 0.00136e3{ms}/(0.32{per_mV}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{dimensionless}*(V+47.13{mV})))+0.08{dimensionless}*exp(-V/11{mV}));
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.675647510010602};
    var h_infinity: dimensionless;
    var tau_h: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+76.1{mV})/6.07{mV}));
    tau_h = sel
      case V >= -40{mV}:
        0.0004537e3{ms}*(1{dimensionless}+exp(-(V+10.66{mV})/11.1{mV}));
      otherwise:
        0.00349e3{ms}/(0.135{dimensionless}*exp(-(V+80{mV})/6.8{mV})+3.56{dimensionless}*exp(0.079{dimensionless}*V)+310000{dimensionless}*exp(0.35{dimensionless}*V));
    endsel;
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp sodium_current_j_gate as
    var j: dimensionless {pub: out, init: 0.675294627571238};
    var j_infinity: dimensionless;
    var tau_j: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    j_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+76.1{mV})/6.07{mV}));
    tau_j = sel
      case V >= -40{mV}:
        0.01163e3{ms}*(1{dimensionless}+exp(-0.1{dimensionless}*(V+32{mV})))/exp(-0.0000002535{dimensionless}*V);
      otherwise:
        0.00349e3{ms}/((V+37.78{mV})/(1{dimensionless}+exp(0.311{dimensionless}*(V+79.23{mV})))*(-127140{dimensionless}*exp(0.2444{dimensionless}*V)-0.00003474{dimensionless}*exp(-0.04391{dimensionless}*V))+0.1212{dimensionless}*exp(-0.01052{dimensionless}*V)/(1{dimensionless}+exp(-0.1378{dimensionless}*(V+40.14{mV}))));
    endsel;
    ode(j, time) = (j_infinity-j)/tau_j;
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    var i_t: uA_per_mm2 {pub: out};
    var E_K: mV {pub: out};
    var g_t: mS {init: 3.5e-5};
    var g_t_endo: mS;
    var a_endo: dimensionless {init: 0.583};
    var b_endo: dimensionless {init: 0.417};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var r: dimensionless {priv: in};
    var s: dimensionless {priv: in};
    var s_slow: dimensionless {priv: in};
    var A_cap: mm2 {pub: in};
    g_t_endo = 0.4647{dimensionless}*g_t;
    E_K = R*T/F*ln(K_o/K_i);
    i_t = g_t_endo*r*(a_endo*s+b_endo*s_slow)*(V-E_K)/A_cap;
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var r: dimensionless {pub: out, init: 0.00218107055088884};
    var tau_r: ms;
    var r_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+10.6{mV})/(-11.42{mV})));
    tau_r = 1e3{ms}/(45.16{dimensionless}*exp(0.03577{dimensionless}*(V+50{mV}))+98.9{dimensionless}*exp(-0.1{dimensionless}*(V+38{mV})));
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_gate as
    var s: dimensionless {pub: out, init: 0.922573773425153};
    var tau_s_endo: ms;
    var s_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    s_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45.3{mV})/6.8841{mV}));
    tau_s_endo = 0.55e3{ms}*exp(-sqr((V+70{mV})/25{mV}))+0.049e3{ms};
    ode(s, time) = (s_infinity-s)/tau_s_endo;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_slow_gate as
    var s_slow: dimensionless {pub: out, init: 0.530207467628341};
    var tau_s_slow_endo: ms;
    var s_slow_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    s_slow_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45.3{mV})/6.8841{mV}));
    tau_s_slow_endo = 3.3e3{ms}*exp(-sqr((V+70{mV})/30{mV}))+0.049e3{ms};
    ode(s_slow, time) = (s_slow_infinity-s_slow)/tau_s_slow_endo;
  enddef;

  def comp steady_state_outward_K_current as
    var i_ss: uA_per_mm2 {pub: out};
    var g_ss: mS {init: 7e-6};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var E_K: mV {pub: in};
    var r_ss: dimensionless {priv: in};
    var s_ss: dimensionless {priv: in};
    var A_cap: mm2 {pub: in};
    i_ss = g_ss*r_ss*s_ss*(V-E_K)/A_cap;
  enddef;

  def comp steady_state_outward_K_current_r_ss_gate as
    var r_ss: dimensionless {pub: out, init: 0.00289374682707489};
    var tau_r_ss: ms;
    var r_ss_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    r_ss_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+11.5{mV})/(-11.82{mV})));
    tau_r_ss = 10e3{ms}/(45.16{dimensionless}*exp(0.03577{dimensionless}*(V+50{mV}))+98.9{dimensionless}*exp(-0.1{dimensionless}*(V+38{mV})));
    ode(r_ss, time) = (r_ss_infinity-r_ss)/tau_r_ss;
  enddef;

  def comp steady_state_outward_K_current_s_ss_gate as
    var s_ss: dimensionless {pub: out, init: 0.308572839431787};
    var tau_s_ss: ms;
    var s_ss_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    s_ss_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+87.5{mV})/10.3{mV}));
    tau_s_ss = 2.1e3{ms};
    ode(s_ss, time) = (s_ss_infinity-s_ss)/tau_s_ss;
  enddef;

  def comp inward_rectifier as
    var i_K1: uA_per_mm2 {pub: out};
    var g_K1: mS {init: 2.4e-5};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var E_K: mV {pub: in};
    var A_cap: mm2 {pub: in};
    i_K1 = ((48e-3{uA}/(exp((V+37{mV})/25{mV})+exp((V+37{mV})/(-25{mV})))+10e-3{uA})*0.001{dimensionless}/(1{dimensionless}+exp((V-(E_K+76.77{mV}))/(-17{mV})))+g_K1*(V-(E_K+1.73{mV}))/((1{dimensionless}+exp(1.613{dimensionless}*F*(V-(E_K+1.73{mV}))/(R*T)))*(1{dimensionless}+exp((K_o-0.9988{dimensionless})/(-0.124{dimensionless})))))/A_cap;
  enddef;

  def comp hyperpolarisation_activated_current as
    var i_f: uA_per_mm2 {pub: out};
    var i_f_Na: uA_per_mm2 {pub: out};
    var i_f_K: uA_per_mm2 {pub: out};
    var g_f: mS {init: 1.45e-6};
    var f_Na: dimensionless {init: 0.2};
    var f_K: dimensionless;
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var E_K: mV {pub: in};
    var E_Na: mV {pub: in};
    var y: dimensionless {priv: in};
    var A_cap: mm2 {pub: in};
    f_K = 1{dimensionless}-f_Na;
    i_f_Na = g_f*y*f_Na*(V-E_Na)/A_cap;
    i_f_K = g_f*y*f_K*(V-E_K)/A_cap;
    i_f = i_f_Na+i_f_K;
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var y: dimensionless {pub: out, init: 0.00331726547133295};
    var tau_y: ms;
    var y_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+138.6{mV})/10.48{mV}));
    tau_y = 1e3{ms}/(0.11885{dimensionless}*exp((V+80{mV})/28.37{mV})+0.5623{dimensionless}*exp((V+80{mV})/(-14.19{mV})));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp background_currents as
    var i_B_Na: uA_per_mm2 {pub: out};
    var i_B_K: uA_per_mm2 {pub: out};
    var g_B_Na: mS {init: 8.015e-8};
    var g_B_K: mS {init: 1.38e-7};
    var E_Na: mV {pub: in};
    var E_K: mV {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var A_cap: mm2 {pub: in};
    var scale_Na: dimensionless {init: 0};
    var scale_K: dimensionless {init: 0};
    i_B_Na = scale_Na*g_B_Na*(V-E_Na)/A_cap;
    i_B_K = scale_K*g_B_K*(V-E_K)/A_cap;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: uA_per_mm2 {pub: out};
    var i_NaK_max: uA {init: 9.5e-5};
    var K_m_K: mM {init: 1.5};
    var K_m_Na: mM {init: 10};
    var sigma: dimensionless;
    var K_o: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var A_cap: mm2 {pub: in};
    var p_nai: dimensionless;
    var p_v: dimensionless;
    p_nai = 1{dimensionless}/(1{dimensionless}+pow(K_m_Na/Na_i, 4{dimensionless}));
    sigma = (exp(Na_o/67.3{mM})-1{dimensionless})/7{dimensionless};
    p_v = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK = i_NaK_max/A_cap*p_v*K_o/(K_o+K_m_K)*p_nai;
  enddef;

  def comp J_CO2 as
    var jco2: mM_per_ms {pub: out};
    var Pco2: mm_per_ms {init: 5.8e-5};
    var CO2i: mM {pub: in};
    var CO2e: mM {pub: in};
    var rho: per_mm {pub: in};
    var V_myo: mm3 {pub: in};
    jco2 = V_myo*rho*Pco2*(CO2e-CO2i);
  enddef;

  def comp comp_v_nhe_exchanger as
    var ExtensionRatio: dimensionless {pub: in};
    var pH_i: dimensionless {pub: in};
    var pH_e: dimensionless {pub: in};
    var Ae: mM {pub: in};
    var Ai: mM {pub: in};
    var V_myo: mm3 {pub: in};
    var v_nhe: mM_per_ms {pub: out};
    var KA: mM {init: 21.4935205515214};
    var KB: mM {init: 1.77948608115949e-7};
    var kp1: per_ms {init: 0.51156085723193};
    var km1: per_ms {init: 0.14069285629105};
    var kp2: per_ms {init: 0.001698};
    var km2: dimensionless;
    var K_Hi: mM {init: 0.000416869383470335};
    var n_Hi: dimensionless {init: 2};
    var Be: mM;
    var Bi: mM;
    var am1: per_ms;
    var ap1: per_ms;
    var am2: per_ms;
    var ap2: per_ms;
    var reg: dimensionless;
    var flux_nhe: dimensionless;
    var Q_10Scaler: dimensionless {init: 0.35};
    var gamma_NHE: dimensionless;
    var K_Hs: mM;
    var pH_on: dimensionless {pub: in};
    gamma_NHE = sel
      case pH_on == 1{dimensionless}:
        1{dimensionless}-2.804{dimensionless}*(ExtensionRatio-1{dimensionless});
      otherwise:
        1{dimensionless};
    endsel;
    K_Hs = K_Hi*gamma_NHE;
    km2 = kp1*kp2/km1;
    Be = pow(10{dimensionless}, -pH_e)*1e3{dimensionless};
    Bi = pow(10{dimensionless}, -pH_i)*1e3{dimensionless};
    ap1 = KB*Ae*kp1/(KA*KB+KB*Ae+Ae*Be+KA*Be);
    am1 = KB*Ai*km1/(KA*KB+KB*Ai+Ai*Bi+KA*Bi);
    ap2 = KA*Bi*kp2/(KA*KB+KB*Ai+Ai*Bi+KA*Bi);
    am2 = KA*Be*km2/(KA*KB+KB*Ae+Ae*Be+KA*Be);
    reg = pow(Bi, n_Hi)/(pow(Bi, n_Hi)+pow(K_Hs, n_Hi));
    flux_nhe = reg*(ap1*ap2-am1*am2)/(ap1+ap2+am1+am2);
    v_nhe = flux_nhe*V_myo*Q_10Scaler;
  enddef;

  def comp comp_v_che_exchanger as
    var pH_i: dimensionless {pub: in};
    var pH_e: dimensionless {pub: in};
    var Cle: mM {pub: in};
    var Cli: mM {pub: in};
    var V_myo: mm3 {pub: in};
    var v_che: mM_per_ms {pub: out};
    var K_Cl: mM {init: 17970.36};
    var K_OH: mM {init: 0.0008907};
    var kp1: per_min {init: 14975.6};
    var km1: per_min {init: 257.4};
    var kp2: per_min {init: 4084.9};
    var km2: per_min;
    var OHe: mM;
    var OHi: mM;
    var a: dimensionless;
    var b: dimensionless;
    var c: dimensionless;
    var d: dimensionless;
    var s1: dimensionless;
    var s6: dimensionless;
    var Q_10Scaler: dimensionless {init: 0.35};
    km2 = kp2*km1/kp1;
    OHe = 1000{dimensionless}*pow(10{dimensionless}, -14{dimensionless}+pH_e);
    OHi = 1000{dimensionless}*pow(10{dimensionless}, -14{dimensionless}+pH_i);
    a = 1{dimensionless}+K_OH/OHe+K_OH*Cle/(OHe*K_Cl);
    b = 1{dimensionless}+K_Cl/Cle+K_Cl*OHe/(Cle*K_OH);
    c = 1{dimensionless}+K_Cl/Cli+K_Cl*OHi/(Cli*K_OH);
    d = 1{dimensionless}+K_OH/OHi+K_OH*Cli/(OHi*K_Cl);
    s1 = 1{dimensionless}/(a+d*(kp1+kp2*a/b)/(km1+km2*d/c));
    s6 = 1{dimensionless}/(d+a*(km1+km2*d/c)/(kp1+kp2*a/b));
    v_che = V_myo*(km1*s6-kp1*s1)/(60{dimensionless}*1000{dimensionless})*Q_10Scaler;
  enddef;

  def comp comp_v_nbc as
    var pH_i: dimensionless {pub: in};
    var pH_e: dimensionless {pub: in};
    var HCO3e: mM {pub: in};
    var HCO3i: mM {pub: in};
    var Nae: mM {pub: in};
    var Nai: mM {pub: in};
    var V_myo: mm3 {pub: in};
    var v_nbc: mM_per_ms {pub: out};
    var K_Na: mM {init: 4866.11};
    var K_HCO3: mM {init: 0.008017};
    var kp1: per_min {init: 4677};
    var km1: per_min {init: 777.92};
    var kp2: per_min {init: 6.656};
    var km2: per_min;
    var K_Hi: mM {init: 0.000183};
    var n_Hi: dimensionless {init: 2.91};
    var K_He: mM {init: 6.53e-5};
    var n_He: dimensionless {init: 2.18};
    var He: mM;
    var Hi: mM;
    var a: dimensionless;
    var b: dimensionless;
    var c: dimensionless;
    var d: dimensionless;
    var s1: dimensionless;
    var s6: dimensionless;
    var reg: dimensionless;
    var Q_10Scaler: dimensionless {init: 0.35};
    km2 = kp2*km1/kp1;
    a = 1{dimensionless}+Nae/K_Na+Nae*HCO3e/(K_Na*K_HCO3);
    b = 1{dimensionless}+K_HCO3/HCO3e+K_Na*K_HCO3/(HCO3e*Nae);
    c = 1{dimensionless}+K_HCO3/HCO3i+K_Na*K_HCO3/(HCO3i*Nai);
    d = 1{dimensionless}+Nai/K_Na+Nai*HCO3i/(K_Na*K_HCO3);
    He = 1000{dimensionless}*pow(10{dimensionless}, -pH_e);
    Hi = 1000{dimensionless}*pow(10{dimensionless}, -pH_i);
    s1 = 1{dimensionless}/(a+d*(kp1+kp2*a/b)/(km1+km2*d/c));
    s6 = 1{dimensionless}/(d+a*(km1+km2*d/c)/(kp1+kp2*a/b));
    reg = pow(Hi, n_Hi)/(pow(Hi, n_Hi)+pow(K_Hi, n_Hi))*(1{dimensionless}-pow(He, n_He)/(pow(He, n_He)+pow(K_He, n_He)));
    v_nbc = V_myo*reg*(km1*s6-kp1*s1)/(60{dimensionless}*1000{dimensionless})*Q_10Scaler;
  enddef;

  def comp comp_v_ae as
    var ExtensionRatio: dimensionless {pub: in};
    var pH_i: dimensionless {pub: in};
    var pH_e: dimensionless {pub: in};
    var Cle: mM {pub: in};
    var Cli: mM {pub: in};
    var HCO3e: mM {pub: in};
    var HCO3i: mM {pub: in};
    var V_myo: mm3 {pub: in};
    var v_ae: mM_per_ms {pub: out};
    var K_Cl: mM {init: 983.5};
    var K_HCO3: mM {init: 110.64};
    var kp1: per_min {init: 20789.9};
    var km1: per_min {init: 21118.2};
    var kp2: per_min {init: 21256.54};
    var km2: per_min;
    var K_Hi: mM {init: 2.67e-5};
    var n_Hi: dimensionless {init: 5.11};
    var K_He: mM {init: 0.000312};
    var n_He: dimensionless {init: 1.44};
    var He: mM;
    var Hi: mM;
    var a: dimensionless;
    var b: dimensionless;
    var c: dimensionless;
    var d: dimensionless;
    var s1: dimensionless;
    var s6: dimensionless;
    var reg: dimensionless;
    var Q_10Scaler: dimensionless {init: 0.35};
    var gamma_AE: dimensionless;
    var K_Hs: mM;
    var pH_on: dimensionless {pub: in};
    gamma_AE = sel
      case pH_on == 1{dimensionless}:
        1{dimensionless}+2.5{dimensionless}*(ExtensionRatio-1{dimensionless});
      otherwise:
        1{dimensionless};
    endsel;
    K_Hs = K_Hi*gamma_AE;
    km2 = kp2*km1/kp1;
    He = 1000{dimensionless}*pow(10{dimensionless}, -pH_e);
    Hi = 1000{dimensionless}*pow(10{dimensionless}, -pH_i);
    a = 1{dimensionless}+K_HCO3/HCO3e+K_HCO3*Cle/(HCO3e*K_Cl);
    b = 1{dimensionless}+K_Cl/Cle+K_Cl*HCO3e/(Cle*K_HCO3);
    c = 1{dimensionless}+K_Cl/Cli+K_Cl*HCO3i/(Cli*K_HCO3);
    d = 1{dimensionless}+K_HCO3/HCO3i+K_HCO3*Cli/(HCO3i*K_Cl);
    s1 = 1{dimensionless}/(a+d*(kp1+kp2*a/b)/(km1+km2*d/c));
    s6 = 1{dimensionless}/(d+a*(km1+km2*d/c)/(kp1+kp2*a/b));
    reg = pow(K_Hs, n_Hi)/(pow(Hi, n_Hi)+pow(K_Hs, n_Hi))*pow(He, n_He)/(pow(He, n_He)+pow(K_He, n_He));
    v_ae = V_myo*reg*(km1*s6-kp1*s1)/(60{dimensionless}*1000{dimensionless})*Q_10Scaler;
  enddef;

  def comp intracellular_ion_concentrations as
    var I_Ko: uA_per_mm2 {pub: in};
    var Na_i: mM {pub: out, init: 10.9735342589175};
    var K_i: mM {pub: out, init: 142.021261491871};
    var V_myo: mm3 {pub: in};
    var time: ms {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_B_Na: uA_per_mm2 {pub: in};
    var I_NaCa: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_f_Na: uA_per_mm2 {pub: in};
    var i_f_K: uA_per_mm2 {pub: in};
    var i_B_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_t: uA_per_mm2 {pub: in};
    var i_ss: uA_per_mm2 {pub: in};
    var A_cap: mm2 {pub: in};
    var I_SAC_Na: uA_per_mm2 {pub: in};
    var I_SAC_K: uA_per_mm2 {pub: in};
    var HCO3i: mM {pub: out, init: 15.1428688811927};
    var HCO3e: mM {pub: out};
    var CO2i: mM {pub: out, init: 1.23610845162584};
    var CO2e: mM {pub: out};
    var PP_co2e: dimensionless {init: 0.05};
    var CO_2sol: dimensionless {init: 0.03253};
    var P_atm: dimensionless {init: 760};
    var kf_co2hyd: per_ms {init: 0.000365};
    var kr_co2hyd: per_mM_per_ms {init: 0.481};
    var jco2: mM_per_ms {pub: in};
    var v_co2hyd: mM_per_ms;
    var V_SR: mm3 {pub: in};
    var v_ae: mM_per_ms {pub: in};
    var v_nbc: mM_per_ms {pub: in};
    var v_nhe: mM_per_ms {pub: in};
    var v_che: mM_per_ms {pub: in};
    var pH_i: dimensionless {pub: out, init: 7.20905044774657};
    var pH_e: dimensionless {pub: out, init: 7.4};
    var Cli: mM {pub: out, init: 16.2285651746901};
    var Cle: mM {pub: out, init: 126};
    var pKa_ib1: dimensionless {init: 6.40013149605198};
    var ib1: mM {init: 31.2044223705215};
    var pKa_ib2: dimensionless {init: 7.48048792987277};
    var ib2: mM {init: 6.84513535697271};
    var beta_intr: dimensionless;
    var pH_scale: dimensionless {init: 1};
    var nai_Nak: mM_per_ms;
    var nai_NHE: mM_per_ms;
    var nai_NBC: mM_per_ms;
    var nai_flux: mM_per_ms;
    var nai_bg: mM_per_ms;
    var K_Nak: mM_per_ms;
    var K_flux: mM_per_ms;
    var I_Cl: uA_per_mm2 {pub: out};
    var E_Cl: mV;
    var g_Cl: mM_per_ms {init: 2e-5};
    var V: mV {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var I_H: uA_per_mm2 {pub: out};
    var E_H: mV;
    var g_H: mM_per_ms {init: 4e-6};
    var H_o: mM;
    var H_i: mM;
    var J_CO2: mM_per_ms {init: 0};
    var i_Stim: uA_per_mm2 {pub: in};
    var nai_NaCa: mM_per_ms;
    var nai_na: mM_per_ms;
    var nai_total: mM_per_ms;
    E_Cl = R*T/F*ln(Cli/Cle);
    I_Cl = g_Cl*(V-E_Cl);
    H_o = 1000{dimensionless}*pow(10{dimensionless}, -pH_e);
    H_i = 1000{dimensionless}*pow(10{dimensionless}, -pH_i);
    E_H = R*T/F*ln(H_o/H_i);
    I_H = g_H*(V-E_H);
    K_Nak = i_NaK*(-2{dimensionless})*A_cap/(V_myo*F);
    K_flux = -(I_SAC_K+i_ss+I_Ko+i_t+i_K1+i_f_K+i_NaK*(-2{dimensionless})+i_B_K)*A_cap/(V_myo*F);
    nai_flux = -(i_B_Na+I_SAC_Na+i_Na+I_NaCa*3{dimensionless}+i_NaK*3{dimensionless}+i_f_Na)*A_cap/(V_myo*F);
    nai_total = nai_flux+nai_NHE+nai_NBC;
    nai_NHE = v_nhe/V_myo;
    nai_NBC = v_nbc/V_myo;
    nai_Nak = i_NaK*3{dimensionless}*A_cap/(V_myo*F);
    nai_NaCa = I_NaCa*3{dimensionless}*A_cap/(V_myo*F);
    nai_na = i_Na*A_cap/(V_myo*F);
    nai_bg = i_f_Na*A_cap/(V_myo*F);
    beta_intr = ln(10{dimensionless})*(pow(10{dimensionless}, -pH_i)+pow(10{dimensionless}, pH_i+pKa_ib1)*ib1/sqr(pow(10{dimensionless}, pH_i)+pow(10{dimensionless}, pKa_ib1))+pow(10{dimensionless}, pH_i+pKa_ib2)*ib2/sqr(pow(10{dimensionless}, pH_i)+pow(10{dimensionless}, pKa_ib2)));
    CO2e = PP_co2e*CO_2sol*P_atm;
    HCO3e = kf_co2hyd/kr_co2hyd*CO2e/(pow(10{dimensionless}, -pH_e)*1e3{dimensionless});
    v_co2hyd = (V_myo+V_SR)*(kf_co2hyd*CO2i-kr_co2hyd*HCO3i*pow(10{dimensionless}, -pH_i)*1e3{dimensionless});
    ode(HCO3i, time) = v_co2hyd/(V_myo+V_SR)+(v_nbc-v_ae)/V_myo;
    ode(CO2i, time) = jco2/V_myo-v_co2hyd/(V_myo+V_SR)+J_CO2;
    ode(pH_i, time) = 1{dimensionless}/(-beta_intr)*((-v_nhe+v_che)/V_myo+v_co2hyd/(V_myo+V_SR)-I_H*A_cap/(V_myo*F));
    ode(Na_i, time) = -(i_B_Na+I_SAC_Na+i_Na+I_NaCa*3{dimensionless}+i_NaK*3{dimensionless}+i_f_Na)*A_cap/(V_myo*F)+(v_nhe+v_nbc)/V_myo;
    ode(K_i, time) = -(i_Stim+I_SAC_K+i_ss+I_Ko+i_t+i_K1+i_f_K-2{dimensionless}*i_NaK+i_B_K)*A_cap/(V_myo*F);
    ode(Cli, time) = I_Cl*A_cap/(V_myo*F)+pH_scale*(v_che+v_ae)/V_myo;
  enddef;

  def comp standard_ionic_concentrations as
    var Na_o: mM {pub: out, init: 140};
    var Ca_o: mM {pub: out, init: 2};
    var K_o: mM {pub: out, init: 5.4};
  enddef;

  def comp SL_pump as
    var g_pCa: mM_per_ms {init: 3.5e-6};
    var K_mpCa: mM {init: 0.0005};
    var Ca_i: mM {pub: in};
    var I_pCa: uA_per_mm2 {pub: out};
    var V_myo: mm3 {pub: in};
    var F: coulomb_per_mole {pub: in};
    var A_cap: mm2 {pub: in};
    I_pCa = g_pCa*Ca_i/(K_mpCa+Ca_i)*2{dimensionless}*V_myo*F/A_cap;
  enddef;

  def comp Cab as
    var V_myo: mm3 {pub: in};
    var F: coulomb_per_mole {pub: in};
    var V: mV {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_e: mM {pub: in};
    var delta: per_mV {pub: in};
    var E_Ca: mV {pub: out};
    var I_Cab: uA_per_mm2 {pub: out};
    var g_Cab: mM_per_ms {init: 2.4216e-8};
    var A_cap: mm2 {pub: in};
    E_Ca = log(Ca_e/Ca_i)/delta;
    I_Cab = g_Cab*(V-E_Ca)*2{dimensionless}*V_myo*F/A_cap;
  enddef;

  def comp I_Ca_L as
    var J_LC: mM_per_ms_per_mm3 {pub: in};
    var V_myo: mm3 {pub: in};
    var F: coulomb_per_mole {pub: in};
    var I_CaL: uA_per_mm2 {pub: out};
    var A_cap: mm2 {pub: in};
    I_CaL = -J_LC*2{dimensionless}*V_myo*F/A_cap;
  enddef;

  def comp NCX as
    var V_myo: mm3 {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var eta: dimensionless {init: 0.35};
    var k_sat: dimensionless {init: 0.1};
    var g_NCX: mM_per_ms {init: 0.0385};
    var delta: per_mV {pub: in};
    var Na_i: mM {pub: in};
    var Na_e: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_e: mM {pub: in};
    var I_NaCa: uA_per_mm2 {pub: out};
    var V: mV {pub: in};
    var edv: dimensionless;
    var edv2: dimensionless;
    var Nai3: mM3;
    var Nae3: mM3;
    var A_cap: mm2 {pub: in};
    edv = exp(delta*0.5{dimensionless}*V*eta);
    edv2 = exp(delta*0.5{dimensionless}*V*(eta-1{dimensionless}));
    Nai3 = pow(Na_i, 3{dimensionless});
    Nae3 = pow(Na_e, 3{dimensionless});
    I_NaCa = g_NCX/((Nae3+pow(K_mNa, 3{dimensionless}))*(Ca_e+K_mCa))*(edv*Nai3*Ca_e-edv2*Nae3*Ca_i)/(1{dimensionless}+k_sat*edv2)*V_myo*F/A_cap;
  enddef;

  def comp SERCA as
    var g_SERCA: mM_per_ms {init: 0.00045};
    var K_SERCA: mM {init: 0.0005};
    var I_SERCA: mM_per_ms {pub: out};
    var Ca_i: mM {pub: in};
    I_SERCA = g_SERCA*sqr(Ca_i)/(sqr(K_SERCA)+sqr(Ca_i));
  enddef;

  def comp ionic_concentrations as
    var Ca_i: mM {pub: out, init: 8.60587059887361e-5};
    var Ca_SR: mM {pub: out, init: 0.843733859307907};
    var TRPN: mM {pub: out, init: 0.0670845085340179};
    var B_CMDN: mM {init: 0.05};
    var K_CMDN: mM {init: 0.00238};
    var g_SRl: per_ms {init: 5.2e-6};
    var J_TPRN: dimensionless {pub: in};
    var I_NaCa: uA_per_mm2 {pub: in};
    var I_Cab: uA_per_mm2 {pub: in};
    var I_pCa: uA_per_mm2 {pub: in};
    var V_myo: mm3 {pub: in};
    var V_SR: mm3 {pub: in};
    var time: ms {pub: in};
    var J_RY: mM_per_ms_per_mm3 {pub: in};
    var I_CaL: uA_per_mm2 {pub: in};
    var I_SERCA: mM_per_ms {pub: in};
    var J_SR: mM_per_ms;
    var F: coulomb_per_mole {pub: in};
    var A_cap: mm2 {pub: in};
    var Ca_b: mM {pub: out};
    var B_TRPN: mM {pub: in};
    Ca_b = B_TRPN-TRPN;
    J_SR = -J_RY+I_SERCA-g_SRl*(Ca_SR-Ca_i);
    ode(Ca_SR, time) = V_myo/V_SR*J_SR;
    ode(Ca_i, time) = 1{dimensionless}/(1{dimensionless}+B_CMDN*K_CMDN/((Ca_i+K_CMDN)*(Ca_i+K_CMDN)))*(J_TPRN-J_SR+(2{dimensionless}*I_NaCa-I_pCa-I_Cab-I_CaL)*A_cap/(2{dimensionless}*V_myo*F));
    ode(TRPN, time) = J_TPRN;
  enddef;

  def comp Ca_conductances as
    var g_D: mm3_per_ms {pub: out, init: 6.5e-11};
    var J_R: mm3_per_ms {pub: out, init: 2e-11};
    var J_L: mm3_per_ms {pub: out, init: 9.13e-13};
  enddef;

  def comp Ca_voltage as
    var delta: per_mV {pub: out, init: 0.075};
    var expmdV: dimensionless {pub: out};
    var expVL: dimensionless {pub: out};
    var V: mV {pub: in};
    var dV: mV {pub: out};
    var V_L0: mV {init: -2};
    var delta_VL: mV {init: 7};
    dV = delta*V;
    expmdV = exp(-dV);
    expVL = exp((V-V_L0)/delta_VL);
  enddef;

  def comp C_ij as
    var C_cc: mM {pub: out};
    var C_oc: mM {pub: out};
    var C_co: mM {pub: out};
    var C_oo: mM {pub: out};
    var g_D: mm3_per_ms {pub: in};
    var J_R: mm3_per_ms {pub: in};
    var J_L: mm3_per_ms {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var dV: mV {pub: in};
    var expmdV: dimensionless {pub: in};
    var Ca_e: mM {pub: in};
    C_cc = Ca_i;
    C_co = (Ca_i+J_R/g_D*Ca_SR)/(1{dimensionless}+J_R/g_D);
    C_oc = sel
      case abs(dV) > 0.000000001{dimensionless}:
        (Ca_i+J_L/g_D*Ca_e*dV*expmdV/(1{dimensionless}-expmdV))/(1{dimensionless}+J_L/g_D*dV/(1{dimensionless}-expmdV));
      otherwise:
        (Ca_i+J_L/g_D*Ca_e)/(1{dimensionless}+J_L/g_D);
    endsel;
    C_oo = sel
      case abs(dV) > 0.000000001{dimensionless}:
        (Ca_i+J_R/g_D*Ca_SR+J_L/g_D*Ca_e*dV*expmdV/(1{dimensionless}-expmdV))/(1{dimensionless}+J_R/g_D+J_L/g_D*dV/(1{dimensionless}-expmdV));
      otherwise:
        (Ca_i+J_R/g_D*Ca_SR+J_L/g_D*Ca_e)/(1{dimensionless}+J_R/g_D+J_L/g_D);
    endsel;
  enddef;

  def comp J_ij as
    var J_Loo: mM_per_ms {pub: out};
    var J_Loc: mM_per_ms {pub: out};
    var J_Rco: mM_per_ms {pub: out};
    var J_Roo: mM_per_ms {pub: out};
    var g_D: mm3_per_ms {pub: in};
    var J_R: mm3_per_ms {pub: in};
    var J_L: mm3_per_ms {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var dV: mV {pub: in};
    var expmdV: dimensionless {pub: in};
    var Ca_e: mM {pub: in};
    J_Rco = J_R*(Ca_SR-Ca_i)/(1{dimensionless}+J_R/g_D);
    J_Roo = sel
      case abs(dV) > 0.00001{dimensionless}:
        J_R*(Ca_SR-Ca_i+J_L/g_D*dV/(1{dimensionless}-expmdV)*(Ca_SR-Ca_e*expmdV))/(1{dimensionless}+J_R/g_D+J_L/g_D*dV/(1{dimensionless}-expmdV));
      otherwise:
        J_R*(Ca_SR-Ca_i+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_SR-Ca_e*exp(-0.00001{dimensionless})))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loc = sel
      case abs(dV) > 0.00001{dimensionless}:
        J_L*dV/(1{dimensionless}-expmdV)*(Ca_e*expmdV-Ca_i)/(1{dimensionless}+J_L/g_D*dV/(1{dimensionless}-expmdV));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_e*exp(-0.00001{dimensionless})-Ca_i)/(1{dimensionless}+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loo = sel
      case abs(dV) > 0.00001{dimensionless}:
        J_L*dV/(1{dimensionless}-expmdV)*(Ca_e*expmdV-Ca_i+J_R/g_D*(Ca_e*expmdV-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*dV/(1{dimensionless}-expmdV));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_e*exp(-0.00001{dimensionless})-Ca_i+J_R/g_D*(Ca_e*exp(-0.00001{dimensionless})-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
  enddef;

  def comp Ca_tau as
    var t_R: ms {pub: out};
    var t_L: ms {pub: out, init: 1};
    t_R = 1.17{dimensionless}*t_L;
  enddef;

  def comp epsilon as
    var epsilon_m: per_ms {pub: out};
    var epsilon_pco: per_ms {pub: out};
    var epsilon_pcc: per_ms {pub: out};
    var a: dimensionless {init: 0.0625};
    var b: dimensionless {init: 14};
    var tau_L: ms {init: 650};
    var K_L: mM {init: 0.00022};
    var C_co: mM {pub: in};
    var Ca_i: mM {pub: in};
    var expVL: dimensionless {pub: in};
    var t_L: ms {pub: in};
    epsilon_pco = 1{dimensionless}/tau_L*C_co/K_L*(expVL+a)/(expVL+1{dimensionless});
    epsilon_pcc = 1{dimensionless}/tau_L*Ca_i/K_L*(expVL+a)/(expVL+1{dimensionless});
    epsilon_m = 1{dimensionless}/tau_L*b*(expVL+a)/(b*expVL+a);
  enddef;

  def comp alpha as
    var alpha_p: per_ms {pub: out};
    var alpha_m: per_ms {pub: out};
    var expVL: dimensionless {pub: in};
    var t_L: ms {pub: in};
    var phi_L: dimensionless {init: 2.35};
    alpha_p = expVL/(t_L*(expVL+1{dimensionless}));
    alpha_m = phi_L/t_L;
  enddef;

  def comp RyR_param as
    var phi_R: dimensionless {pub: out};
    var phi_R_base: dimensionless {init: 0.05};
    var tau_R: ms {pub: out, init: 2.43};
    var theta_R: dimensionless {pub: out, init: 0.012};
    var K_RyR: mM {pub: out, init: 0.041};
    var ExtensionRatio: dimensionless {pub: in};
    var gamma_NO: dimensionless;
    var NO_on: dimensionless {pub: in};
    gamma_NO = sel
      case NO_on == 1{dimensionless}:
        1{dimensionless}+22.41{dimensionless}*(ExtensionRatio-1{dimensionless});
      otherwise:
        1{dimensionless};
    endsel;
    phi_R = phi_R_base*gamma_NO;
  enddef;

  def comp beta as
    var beta_poc: per_ms {pub: out};
    var beta_pcc: per_ms {pub: out};
    var beta_m: per_ms {pub: out};
    var K_RyR: mM {pub: in};
    var phi_R: dimensionless {pub: in};
    var tau_R: ms {pub: in};
    var theta_R: dimensionless {pub: in};
    var t_R: ms {pub: in};
    var C_oc: mM {pub: in};
    var Ca_i: mM {pub: in};
    beta_poc = 1{dimensionless}/t_R*sqr(C_oc)/(sqr(C_oc)+sqr(K_RyR));
    beta_pcc = 1{dimensionless}/t_R*sqr(Ca_i)/(sqr(Ca_i)+sqr(K_RyR));
    beta_m = phi_R/t_R;
  enddef;

  def comp mu_ij as
    var mu_poc: per_ms {pub: out};
    var mu_pcc: per_ms {pub: out};
    var mu_moc: per_ms {pub: out};
    var mu_mcc: per_ms {pub: out};
    var phi_R: dimensionless {pub: in};
    var tau_R: ms {pub: in};
    var C_oc: mM {pub: in};
    var Ca_i: mM {pub: in};
    var K_RyR: mM {pub: in};
    var c: dimensionless {init: 0.01};
    var d: dimensionless {init: 100};
    var theta_R: dimensionless {pub: in};
    mu_poc = 1{dimensionless}/tau_R*(sqr(C_oc)+c*sqr(K_RyR))/(sqr(C_oc)+sqr(K_RyR));
    mu_pcc = 1{dimensionless}/tau_R*(sqr(Ca_i)+c*sqr(K_RyR))/(sqr(Ca_i)+sqr(K_RyR));
    mu_moc = theta_R/tau_R*d*(sqr(C_oc)+c*sqr(K_RyR))/(d*sqr(C_oc)+c*sqr(K_RyR));
    mu_mcc = theta_R/tau_R*d*(sqr(Ca_i)+c*sqr(K_RyR))/(d*sqr(Ca_i)+c*sqr(K_RyR));
  enddef;

  def comp y_ij as
    var y_oc: dimensionless {pub: out};
    var y_co: dimensionless {pub: out};
    var y_oo: dimensionless {pub: out};
    var y_cc: dimensionless {pub: out};
    var denom: per_ms3;
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_poc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    denom = (alpha_p+alpha_m)*((beta_m+beta_poc+alpha_m)*(beta_m+beta_pcc)+alpha_p*(beta_m+beta_poc));
    y_oc = alpha_p*beta_m*(alpha_p+alpha_m+beta_m+beta_pcc)/denom;
    y_co = alpha_m*(beta_pcc*(alpha_m+beta_m+beta_poc)+beta_poc*alpha_p)/denom;
    y_oo = alpha_p*(beta_poc*(alpha_p+beta_m+beta_pcc)+beta_pcc*alpha_m)/denom;
    y_cc = alpha_m*beta_m*(alpha_m+alpha_p+beta_m+beta_poc)/denom;
  enddef;

  def comp r_i as
    var r_1: per_ms {pub: out};
    var r_2: per_ms {pub: out};
    var r_3: per_ms {pub: out};
    var r_4: per_ms {pub: out};
    var r_5: per_ms {pub: out};
    var r_6: per_ms {pub: out};
    var r_7: per_ms {pub: out};
    var r_8: per_ms {pub: out};
    var y_oc: dimensionless {pub: in};
    var y_cc: dimensionless {pub: in};
    var y_co: dimensionless {pub: in};
    var mu_poc: per_ms {pub: in};
    var mu_pcc: per_ms {pub: in};
    var mu_moc: per_ms {pub: in};
    var mu_mcc: per_ms {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var epsilon_m: per_ms {pub: in};
    var epsilon_pco: per_ms {pub: in};
    var epsilon_pcc: per_ms {pub: in};
    r_1 = y_oc*mu_poc+y_cc*mu_pcc;
    r_2 = (alpha_p*mu_moc+alpha_m*mu_mcc)/(alpha_p+alpha_m);
    r_3 = beta_m*mu_pcc/(beta_m+beta_pcc);
    r_4 = mu_mcc;
    r_5 = y_co*epsilon_pco+y_cc*epsilon_pcc;
    r_6 = epsilon_m;
    r_7 = alpha_m*epsilon_pcc/(alpha_p+alpha_m);
    r_8 = epsilon_m;
  enddef;

  def comp z_i as
    var z_1: dimensionless {pub: out, init: 0.988955429362334};
    var z_2: dimensionless {pub: out, init: 0.00860686643357905};
    var z_3: dimensionless {pub: out, init: 0.00241692704700704};
    var z_4: dimensionless {pub: out};
    var r_1: per_ms {pub: in};
    var r_2: per_ms {pub: in};
    var r_3: per_ms {pub: in};
    var r_4: per_ms {pub: in};
    var r_5: per_ms {pub: in};
    var r_6: per_ms {pub: in};
    var r_7: per_ms {pub: in};
    var r_8: per_ms {pub: in};
    var time: ms {pub: in};
    z_4 = 1{dimensionless}-z_1-z_2-z_3;
    ode(z_1, time) = -(r_1+r_5)*z_1+r_2*z_2+r_6*z_3;
    ode(z_2, time) = r_1*z_1-(r_2+r_7)*z_2+r_8*z_4;
    ode(z_3, time) = r_5*z_1-(r_6+r_3)*z_3+r_4*z_4;
  enddef;

  def comp J_values as
    var J_R1: mM_per_ms {pub: out};
    var J_R3: mM_per_ms {pub: out};
    var J_L1: mM_per_ms {pub: out};
    var J_L2: mM_per_ms {pub: out};
    var J_Roo: mM_per_ms {pub: in};
    var J_Rco: mM_per_ms {pub: in};
    var J_Loo: mM_per_ms {pub: in};
    var J_Loc: mM_per_ms {pub: in};
    var y_oo: dimensionless {pub: in};
    var y_co: dimensionless {pub: in};
    var y_oc: dimensionless {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    J_R1 = y_oo*J_Roo+J_Rco*y_co;
    J_R3 = J_Rco*beta_pcc/(beta_m+beta_pcc);
    J_L1 = J_Loo*y_oo+J_Loc*y_oc;
    J_L2 = J_Loc*alpha_p/(alpha_p+alpha_m);
  enddef;

  def comp L_flux as
    var J_LC: mM_per_ms_per_mm3 {pub: out};
    var z_1: dimensionless {pub: in};
    var z_2: dimensionless {pub: in};
    var V_myo: mm3 {pub: in};
    var N: dimensionless {pub: in};
    var J_L1: mM_per_ms {pub: in};
    var J_L2: mM_per_ms {pub: in};
    J_LC = (z_1*J_L1+z_2*J_L2)*N/V_myo;
  enddef;

  def comp R_flux as
    var J_RY: mM_per_ms_per_mm3 {pub: out};
    var z_1: dimensionless {pub: in};
    var z_3: dimensionless {pub: in};
    var V_myo: mm3 {pub: in};
    var N: dimensionless {pub: in};
    var J_R1: mM_per_ms {pub: in};
    var J_R3: mM_per_ms {pub: in};
    J_RY = (z_1*J_R1+z_3*J_R3)*N/V_myo;
  enddef;

  def comp troponin as
    var J_TPRN: dimensionless {pub: out};
    var B_TRPN: mM {pub: out, init: 0.07};
    var TRPN: mM {pub: in};
    var Ca_i: mM {pub: in};
    var betaCab: per_ms;
    var k_on: per_mM_per_ms {pub: out, init: 100};
    var k_off: per_ms {pub: out, init: 0.2};
    var gamma_trpn: dimensionless {pub: out, init: 2};
    var TRPN_tot: mM {pub: out, init: 0.07};
    var Tension: N_per_mm2 {pub: in};
    var T_ref: N_per_mm2 {pub: in};
    betaCab = sel
      case 1{dimensionless}-Tension/(gamma_trpn*T_ref) > 0.1{per_ms}:
        k_off*(1{dimensionless}-Tension/(gamma_trpn*T_ref));
      otherwise:
        k_off*0.1{dimensionless};
    endsel;
    J_TPRN = (B_TRPN-TRPN)*betaCab-Ca_i*TRPN*k_on;
  enddef;

  def comp Myofilaments as
    var time: ms {pub: in};
    var lamda: dimensionless {pub: out};
    var ExtensionRatio: dimensionless {pub: out, init: 1};
    var dExtensionRatiodt: per_ms {pub: out};
    var lambda_prev: dimensionless {pub: out};
    lambda_prev = ExtensionRatio;
    dExtensionRatiodt = 0{dimensionless};
    lamda = sel
      case (ExtensionRatio > 0.8{dimensionless}) and (ExtensionRatio <= 1.15{dimensionless}):
        ExtensionRatio;
      case ExtensionRatio > 1.15{dimensionless}:
        1.15{dimensionless};
      otherwise:
        0.8{dimensionless};
    endsel;
  enddef;

  def comp thinfilaments as
  enddef;

  def comp tropomyosin as
    var z: dimensionless {pub: out, init: 0.0175189833295748};
    var z_max: dimensionless {pub: out};
    var time: ms {pub: in};
    var k_on: per_mM_per_ms {pub: in};
    var k_off: per_ms {pub: in};
    var gamma_trpn: dimensionless {pub: in};
    var TRPN_tot: mM {pub: in};
    var alpha_0: per_ms {init: 0.008};
    var alpha_r1: per_ms {init: 0.002};
    var alpha_r2: per_ms {init: 0.00175};
    var n_Rel: dimensionless {init: 3};
    var K_z: dimensionless {init: 0.15};
    var n_Hill: dimensionless {init: 3};
    var Ca_50ref: mM {init: 0.00105};
    var z_p: dimensionless {init: 0.85};
    var beta_1: dimensionless {init: -4};
    var Ca_50: mM;
    var Ca_TRPN_50: mM;
    var K_2: dimensionless;
    var K_1: dimensionless;
    var alpha_Tm: per_ms;
    var beta_Tm: per_ms;
    var beta_0: dimensionless {pub: in};
    var Ca_b: mM {pub: in};
    var lamda: dimensionless {pub: in};
    K_2 = alpha_r2*pow(z_p, n_Rel)/(pow(z_p, n_Rel)+pow(K_z, n_Rel))*(1{dimensionless}-n_Rel*pow(K_z, n_Rel)/(pow(z_p, n_Rel)+pow(K_z, n_Rel)));
    K_1 = alpha_r2*pow(z_p, n_Rel-1{dimensionless})*n_Rel*pow(K_z, n_Rel)/sqr(pow(z_p, n_Rel)+pow(K_z, n_Rel));
    z_max = (alpha_0/pow(Ca_TRPN_50/TRPN_tot, n_Hill)-K_2)/(alpha_r1+K_1+alpha_0/pow(Ca_TRPN_50/TRPN_tot, n_Hill));
    Ca_50 = Ca_50ref*(1{dimensionless}+beta_1*(lamda-1{dimensionless}));
    Ca_TRPN_50 = Ca_50*TRPN_tot/(Ca_50+k_off/k_on*(1{dimensionless}-(1{dimensionless}+beta_0*(lamda-1{dimensionless}))*0.5{dimensionless}/gamma_trpn));
    alpha_Tm = alpha_0*pow(Ca_b/Ca_TRPN_50, n_Hill);
    beta_Tm = alpha_r1+alpha_r2*pow(z, n_Rel-1{dimensionless})/(pow(z, n_Rel)+pow(K_z, n_Rel));
    ode(z, time) = alpha_Tm*(1{dimensionless}-z)-beta_Tm*z;
  enddef;

  def comp filament_overlap as
    var lamda: dimensionless {pub: in};
    var overlap: dimensionless {pub: out};
    var beta_0: dimensionless {pub: out, init: 4.9};
    overlap = 1{dimensionless}+beta_0*(lamda-1{dimensionless});
  enddef;

  def comp length_independent_tension as
    var T_ref: N_per_mm2 {pub: out, init: 56.2};
    var T_Base: N_per_mm2 {pub: out};
    var z: dimensionless {pub: in};
    var z_max: dimensionless {pub: in};
    T_Base = T_ref*z/z_max;
  enddef;

  def comp isometric_tension as
    var T_0: N_per_mm2 {pub: out};
    var T_Base: N_per_mm2 {pub: in};
    var overlap: dimensionless {pub: in};
    T_0 = T_Base*overlap;
  enddef;

  def comp Cross_Bridges as
    var time: ms {pub: in};
    var dExtensionRatiodt: per_ms {pub: in};
    var Q: dimensionless;
    var a: dimensionless {init: 0.35};
    var Q_1: dimensionless {init: 0};
    var Q_2: dimensionless {init: 0};
    var Q_3: dimensionless {init: 0};
    var A_1: dimensionless {init: -29};
    var A_2: dimensionless {init: 138};
    var A_3: dimensionless {init: 129};
    var alpha_1: dimensionless {init: 0.03};
    var alpha_2: dimensionless {init: 0.13};
    var alpha_3: dimensionless {init: 0.625};
    var T_0: N_per_mm2 {pub: in};
    var Tension: N_per_mm2 {pub: out};
    Q = Q_1+Q_2+Q_3;
    Tension = sel
      case Q < 0{dimensionless}:
        T_0*(a*Q+1{dimensionless})/(1{dimensionless}-Q);
      otherwise:
        T_0*(1{dimensionless}+(a+2{dimensionless})*Q)/(1{dimensionless}+Q);
    endsel;
    ode(Q_1, time) = A_1*dExtensionRatiodt-alpha_1*Q_1;
    ode(Q_2, time) = A_2*dExtensionRatiodt-alpha_2*Q_2;
    ode(Q_3, time) = A_3*dExtensionRatiodt-alpha_3*Q_3;
  enddef;

  def comp Calcium_Handling as
  enddef;

  def comp Calcium_membrane as
  enddef;

  def comp pH_regulation as
  enddef;

  def group as containment for
    comp Myofilaments incl
      comp thinfilaments incl
        comp tropomyosin;
        comp troponin;
      endcomp;
      comp filament_overlap;
      comp Cross_Bridges;
      comp isometric_tension;
      comp length_independent_tension;
    endcomp;
    comp pH_regulation incl
      comp comp_v_nhe_exchanger;
      comp comp_v_che_exchanger;
      comp comp_v_nbc;
      comp comp_v_ae;
      comp J_CO2;
    endcomp;
    comp membrane incl
      comp KSA_current;
      comp SAC_current;
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h_gate;
        comp sodium_current_j_gate;
      endcomp;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s_gate;
        comp Ca_independent_transient_outward_K_current_s_slow_gate;
      endcomp;
      comp steady_state_outward_K_current incl
        comp steady_state_outward_K_current_r_ss_gate;
        comp steady_state_outward_K_current_s_ss_gate;
      endcomp;
      comp inward_rectifier;
      comp hyperpolarisation_activated_current incl
        comp hyperpolarisation_activated_current_y_gate;
      endcomp;
      comp background_currents;
      comp sodium_potassium_pump;
      comp intracellular_ion_concentrations;
      comp standard_ionic_concentrations;
      comp I_stimulus;
    endcomp;
    comp Calcium_membrane incl
      comp SL_pump;
      comp Cab;
      comp NCX;
      comp I_Ca_L;
    endcomp;
    comp Calcium_Handling incl
      comp SERCA;
      comp L_flux;
      comp R_flux;
      comp z_i;
      comp r_i;
      comp mu_ij;
      comp C_ij;
      comp J_ij;
      comp epsilon;
      comp beta;
      comp alpha;
      comp J_values;
      comp y_ij;
      comp RyR_param;
      comp Ca_voltage;
      comp Ca_conductances;
      comp Ca_tau;
      comp ionic_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h_gate;
      comp sodium_current_j_gate;
    endcomp;
    comp Ca_independent_transient_outward_K_current incl
      comp Ca_independent_transient_outward_K_current_r_gate;
      comp Ca_independent_transient_outward_K_current_s_gate;
      comp Ca_independent_transient_outward_K_current_s_slow_gate;
    endcomp;
    comp steady_state_outward_K_current incl
      comp steady_state_outward_K_current_r_ss_gate;
      comp steady_state_outward_K_current_s_ss_gate;
    endcomp;
    comp hyperpolarisation_activated_current incl
      comp hyperpolarisation_activated_current_y_gate;
    endcomp;
  enddef;
  def map between Ca_voltage and membrane for
    vars V and V;
  enddef;
  def map between Ca_conductances and C_ij for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
  enddef;
  def map between Ca_conductances and J_ij for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
  enddef;
  def map between ionic_concentrations and C_ij for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
  enddef;
  def map between standard_ionic_concentrations and C_ij for
    vars Ca_o and Ca_e;
  enddef;
  def map between ionic_concentrations and J_ij for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
  enddef;
  def map between standard_ionic_concentrations and J_ij for
    vars Ca_o and Ca_e;
  enddef;
  def map between Ca_voltage and J_ij for
    vars dV and dV;
    vars expmdV and expmdV;
  enddef;
  def map between Ca_voltage and C_ij for
    vars dV and dV;
    vars expmdV and expmdV;
  enddef;
  def map between epsilon and C_ij for
    vars C_co and C_co;
  enddef;
  def map between epsilon and ionic_concentrations for
    vars Ca_i and Ca_i;
  enddef;
  def map between epsilon and Ca_voltage for
    vars expVL and expVL;
  enddef;
  def map between epsilon and Ca_tau for
    vars t_L and t_L;
  enddef;
  def map between alpha and Ca_tau for
    vars t_L and t_L;
  enddef;
  def map between alpha and Ca_voltage for
    vars expVL and expVL;
  enddef;
  def map between beta and RyR_param for
    vars phi_R and phi_R;
    vars tau_R and tau_R;
    vars theta_R and theta_R;
    vars K_RyR and K_RyR;
  enddef;
  def map between beta and ionic_concentrations for
    vars Ca_i and Ca_i;
  enddef;
  def map between beta and C_ij for
    vars C_oc and C_oc;
  enddef;
  def map between beta and Ca_tau for
    vars t_R and t_R;
  enddef;
  def map between mu_ij and RyR_param for
    vars phi_R and phi_R;
    vars tau_R and tau_R;
    vars theta_R and theta_R;
    vars K_RyR and K_RyR;
  enddef;
  def map between mu_ij and C_ij for
    vars C_oc and C_oc;
  enddef;
  def map between mu_ij and ionic_concentrations for
    vars Ca_i and Ca_i;
  enddef;
  def map between beta and y_ij for
    vars beta_pcc and beta_pcc;
    vars beta_poc and beta_poc;
    vars beta_m and beta_m;
  enddef;
  def map between alpha and y_ij for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
  enddef;
  def map between alpha and r_i for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
  enddef;
  def map between beta and r_i for
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
  enddef;
  def map between r_i and y_ij for
    vars y_oc and y_oc;
    vars y_cc and y_cc;
    vars y_co and y_co;
  enddef;
  def map between I_stimulus and intracellular_ion_concentrations for
    vars i_Stim and i_Stim;
  enddef;
  def map between r_i and mu_ij for
    vars mu_poc and mu_poc;
    vars mu_pcc and mu_pcc;
    vars mu_moc and mu_moc;
    vars mu_mcc and mu_mcc;
  enddef;
  def map between r_i and epsilon for
    vars epsilon_m and epsilon_m;
    vars epsilon_pco and epsilon_pco;
    vars epsilon_pcc and epsilon_pcc;
  enddef;
  def map between r_i and z_i for
    vars r_1 and r_1;
    vars r_2 and r_2;
    vars r_3 and r_3;
    vars r_4 and r_4;
    vars r_5 and r_5;
    vars r_6 and r_6;
    vars r_7 and r_7;
    vars r_8 and r_8;
  enddef;
  def map between z_i and environment for
    vars time and time;
  enddef;
  def map between J_values and J_ij for
    vars J_Rco and J_Rco;
    vars J_Roo and J_Roo;
    vars J_Loo and J_Loo;
    vars J_Loc and J_Loc;
  enddef;
  def map between J_values and y_ij for
    vars y_oo and y_oo;
    vars y_co and y_co;
    vars y_oc and y_oc;
  enddef;
  def map between alpha and J_values for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
  enddef;
  def map between beta and J_values for
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
  enddef;
  def map between z_i and L_flux for
    vars z_1 and z_1;
    vars z_2 and z_2;
  enddef;
  def map between L_flux and J_values for
    vars J_L1 and J_L1;
    vars J_L2 and J_L2;
  enddef;
  def map between L_flux and cell_geom for
    vars N and N;
    vars V_myo and V_myo;
  enddef;
  def map between z_i and R_flux for
    vars z_1 and z_1;
    vars z_3 and z_3;
  enddef;
  def map between R_flux and J_values for
    vars J_R1 and J_R1;
    vars J_R3 and J_R3;
  enddef;
  def map between R_flux and cell_geom for
    vars N and N;
    vars V_myo and V_myo;
  enddef;
  def map between I_Ca_L and cell_geom for
    vars A_cap and A_cap;
    vars V_myo and V_myo;
  enddef;
  def map between I_Ca_L and ionic_concentrations for
    vars I_CaL and I_CaL;
  enddef;
  def map between I_Ca_L and L_flux for
    vars J_LC and J_LC;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between R_flux and ionic_concentrations for
    vars J_RY and J_RY;
  enddef;
  def map between ionic_concentrations and cell_geom for
    vars A_cap and A_cap;
    vars V_SR and V_SR;
    vars V_myo and V_myo;
  enddef;
  def map between ionic_concentrations and SERCA for
    vars I_SERCA and I_SERCA;
    vars Ca_i and Ca_i;
  enddef;
  def map between ionic_concentrations and troponin for
    vars J_TPRN and J_TPRN;
    vars TRPN and TRPN;
    vars Ca_i and Ca_i;
    vars B_TRPN and B_TRPN;
  enddef;
  def map between membrane and NCX for
    vars V and V;
    vars I_NaCa and I_NaCa;
    vars F and F;
  enddef;
  def map between I_Ca_L and membrane for
    vars F and F;
    vars I_CaL and I_CaL;
  enddef;
  def map between membrane and Cab for
    vars V and V;
    vars I_Cab and I_Cab;
    vars F and F;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
    vars V and V;
    vars R and R;
    vars T and T;
    vars I_Cl and I_Cl;
    vars I_H and I_H;
  enddef;
  def map between sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between steady_state_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier and environment for
    vars time and time;
  enddef;
  def map between hyperpolarisation_activated_current and environment for
    vars time and time;
  enddef;
  def map between background_currents and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and sodium_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and Ca_independent_transient_outward_K_current for
    vars V and V;
    vars i_t and i_t;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and steady_state_outward_K_current for
    vars V and V;
    vars i_ss and i_ss;
  enddef;
  def map between membrane and inward_rectifier for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and hyperpolarisation_activated_current for
    vars V and V;
    vars i_f and i_f;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars i_B_Na and i_B_Na;
    vars i_B_K and i_B_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between sodium_current and hyperpolarisation_activated_current for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and standard_ionic_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars i_t and i_t;
    vars K_i and K_i;
  enddef;
  def map between Ca_independent_transient_outward_K_current and steady_state_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and hyperpolarisation_activated_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between steady_state_outward_K_current and intracellular_ion_concentrations for
    vars i_ss and i_ss;
  enddef;
  def map between inward_rectifier and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
    vars K_i and K_i;
  enddef;
  def map between inward_rectifier and standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between hyperpolarisation_activated_current and intracellular_ion_concentrations for
    vars i_f_Na and i_f_Na;
    vars i_f_K and i_f_K;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars i_B_Na and i_B_Na;
    vars i_B_K and i_B_K;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and standard_ionic_concentrations for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_slow_gate for
    vars s_slow and s_slow;
    vars time and time;
    vars V and V;
  enddef;
  def map between steady_state_outward_K_current and steady_state_outward_K_current_r_ss_gate for
    vars r_ss and r_ss;
    vars time and time;
    vars V and V;
  enddef;
  def map between steady_state_outward_K_current and steady_state_outward_K_current_s_ss_gate for
    vars s_ss and s_ss;
    vars time and time;
    vars V and V;
  enddef;
  def map between hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between cell_geom and SL_pump for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
  enddef;
  def map between I_stimulus and environment for
    vars time and time;
  enddef;
  def map between SL_pump and membrane for
    vars F and F;
    vars I_pCa and I_pCa;
  enddef;
  def map between SL_pump and ionic_concentrations for
    vars Ca_i and Ca_i;
    vars I_pCa and I_pCa;
  enddef;
  def map between ionic_concentrations and Cab for
    vars Ca_i and Ca_i;
    vars I_Cab and I_Cab;
  enddef;
  def map between standard_ionic_concentrations and Cab for
    vars Ca_o and Ca_e;
  enddef;
  def map between cell_geom and Cab for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
  enddef;
  def map between cell_geom and intracellular_ion_concentrations for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
    vars V_SR and V_SR;
  enddef;
  def map between Ca_voltage and Cab for
    vars delta and delta;
  enddef;
  def map between ionic_concentrations and NCX for
    vars Ca_i and Ca_i;
    vars I_NaCa and I_NaCa;
  enddef;
  def map between standard_ionic_concentrations and NCX for
    vars Ca_o and Ca_e;
    vars Na_o and Na_e;
  enddef;
  def map between intracellular_ion_concentrations and NCX for
    vars I_NaCa and I_NaCa;
    vars Na_i and Na_i;
  enddef;
  def map between cell_geom and NCX for
    vars V_myo and V_myo;
    vars A_cap and A_cap;
  enddef;
  def map between Ca_voltage and NCX for
    vars delta and delta;
  enddef;
  def map between I_stimulus and membrane for
    vars i_Stim and i_Stim;
  enddef;
  def map between cell_geom and I_stimulus for
    vars A_cap and A_cap;
  enddef;
  def map between cell_geom and membrane for
    vars A_cap and A_cap;
  enddef;
  def map between cell_geom and Ca_independent_transient_outward_K_current for
    vars A_cap and A_cap;
  enddef;
  def map between cell_geom and sodium_current for
    vars A_cap and A_cap;
  enddef;
  def map between cell_geom and steady_state_outward_K_current for
    vars A_cap and A_cap;
  enddef;
  def map between cell_geom and inward_rectifier for
    vars A_cap and A_cap;
  enddef;
  def map between cell_geom and hyperpolarisation_activated_current for
    vars A_cap and A_cap;
  enddef;
  def map between cell_geom and background_currents for
    vars A_cap and A_cap;
  enddef;
  def map between cell_geom and sodium_potassium_pump for
    vars A_cap and A_cap;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between length_independent_tension and tropomyosin for
    vars z and z;
    vars z_max and z_max;
  enddef;
  def map between Cross_Bridges and environment for
    vars time and time;
  enddef;
  def map between Myofilaments and Cross_Bridges for
    vars dExtensionRatiodt and dExtensionRatiodt;
  enddef;
  def map between Cross_Bridges and isometric_tension for
    vars T_0 and T_0;
  enddef;
  def map between length_independent_tension and isometric_tension for
    vars T_Base and T_Base;
  enddef;
  def map between isometric_tension and filament_overlap for
    vars overlap and overlap;
  enddef;
  def map between Myofilaments and filament_overlap for
    vars lamda and lamda;
  enddef;
  def map between tropomyosin and filament_overlap for
    vars beta_0 and beta_0;
  enddef;
  def map between tropomyosin and environment for
    vars time and time;
  enddef;
  def map between tropomyosin and troponin for
    vars k_on and k_on;
    vars k_off and k_off;
    vars gamma_trpn and gamma_trpn;
    vars TRPN_tot and TRPN_tot;
  enddef;
  def map between tropomyosin and ionic_concentrations for
    vars Ca_b and Ca_b;
  enddef;
  def map between Myofilaments and tropomyosin for
    vars lamda and lamda;
  enddef;
  def map between Myofilaments and environment for
    vars time and time;
  enddef;
  def map between troponin and length_independent_tension for
    vars T_ref and T_ref;
  enddef;
  def map between troponin and Cross_Bridges for
    vars Tension and Tension;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between SAC_current and membrane for
    vars V and V;
    vars I_SAC_Na and I_SAC_Na;
    vars I_SAC_K and I_SAC_K;
  enddef;
  def map between SAC_current and sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between SAC_current and intracellular_ion_concentrations for
    vars I_SAC_Na and I_SAC_Na;
    vars I_SAC_K and I_SAC_K;
  enddef;
  def map between SAC_current and Ca_independent_transient_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between SAC_current and Myofilaments for
    vars ExtensionRatio and ExtensionRatio;
  enddef;
  def map between SAC_current and cell_geom for
    vars A_cap and A_cap;
  enddef;
  def map between KSA_current and membrane for
    vars V and V;
    vars I_Ko and I_Ko;
  enddef;
  def map between KSA_current and intracellular_ion_concentrations for
    vars I_Ko and I_Ko;
  enddef;
  def map between KSA_current and Ca_independent_transient_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between KSA_current and Myofilaments for
    vars ExtensionRatio and ExtensionRatio;
  enddef;
  def map between KSA_current and cell_geom for
    vars A_cap and A_cap;
  enddef;
  def map between intracellular_ion_concentrations and comp_v_ae for
    vars pH_i and pH_i;
    vars pH_e and pH_e;
    vars Cle and Cle;
    vars Cli and Cli;
    vars HCO3e and HCO3e;
    vars HCO3i and HCO3i;
    vars v_ae and v_ae;
  enddef;
  def map between intracellular_ion_concentrations and comp_v_nhe_exchanger for
    vars pH_i and pH_i;
    vars pH_e and pH_e;
    vars Na_i and Ai;
    vars v_nhe and v_nhe;
  enddef;
  def map between standard_ionic_concentrations and comp_v_nhe_exchanger for
    vars Na_o and Ae;
  enddef;
  def map between standard_ionic_concentrations and comp_v_nbc for
    vars Na_o and Nae;
  enddef;
  def map between cell_geom and comp_v_nhe_exchanger for
    vars V_myo and V_myo;
  enddef;
  def map between intracellular_ion_concentrations and comp_v_che_exchanger for
    vars pH_i and pH_i;
    vars pH_e and pH_e;
    vars Cle and Cle;
    vars Cli and Cli;
    vars v_che and v_che;
  enddef;
  def map between cell_geom and comp_v_che_exchanger for
    vars V_myo and V_myo;
  enddef;
  def map between intracellular_ion_concentrations and comp_v_nbc for
    vars pH_i and pH_i;
    vars pH_e and pH_e;
    vars Na_i and Nai;
    vars HCO3e and HCO3e;
    vars HCO3i and HCO3i;
    vars v_nbc and v_nbc;
  enddef;
  def map between cell_geom and comp_v_nbc for
    vars V_myo and V_myo;
  enddef;
  def map between cell_geom and comp_v_ae for
    vars V_myo and V_myo;
  enddef;
  def map between cell_geom and J_CO2 for
    vars V_myo and V_myo;
    vars rho and rho;
  enddef;
  def map between intracellular_ion_concentrations and J_CO2 for
    vars CO2i and CO2i;
    vars CO2e and CO2e;
    vars jco2 and jco2;
  enddef;
  def map between comp_v_nhe_exchanger and Myofilaments for
    vars ExtensionRatio and ExtensionRatio;
  enddef;
  def map between comp_v_ae and Myofilaments for
    vars ExtensionRatio and ExtensionRatio;
  enddef;
  def map between RyR_param and Myofilaments for
    vars ExtensionRatio and ExtensionRatio;
  enddef;
  def map between comp_v_nhe_exchanger and strain_control for
    vars pH_on and pH_on;
  enddef;
  def map between comp_v_ae and strain_control for
    vars pH_on and pH_on;
  enddef;
  def map between RyR_param and strain_control for
    vars NO_on and NO_on;
  enddef;
  def map between SAC_current and strain_control for
    vars SAC_on and SAC_on;
  enddef;
  def map between KSA_current and strain_control for
    vars SAC_on and SAC_on;
  enddef;
enddef;
