//   FILE :  magnus_model_1998.xml
//
// CREATED :  11th April 2002
//
// LAST MODIFIED : 11th August 2003
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Magnus and Keizer's
// 1998 model of beta-call mitochondrial Ca2+ handling and electrical activity I. Cytoplasmic variables.
//
// CHANGES:
//   18/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   11/08/2003 - CML - Corrected equations.
def model magnus_keizer_1998_version01 as
  // A Model Of Beta-Cell Mitochondrial Calcium Handling And Electrical Activity
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // When exposed to a threshold concentration of glucose, pancreatic beta-cells from a wide range of species exhibit a complicated pattern of electrical activity. Bursts of action potential spikes (the "active" phase) are observed, separated by a "silent" phase of membrane repolarisation. At even higher glucose concentrations, continuous action potentials are seen. This electrical activity has two important physiological correlates: increased cytosolic Ca2+ concentration ([Ca2+]i) and increased rate of insulin secretion during the active phase. It is generally accepted that the rise in [Ca2+]i plays a major role in insulin secretion and that the action potential spikes during a burst are responsible for the rise in [Ca2+]i.
  //
  // Because the glucose signal for insulin secretion operates via metabolism rather than through a plasma membrane-bound receptor, the details of how glucose stimulates electrical activity have been difficult to resolve. However, experimental data and theoretical models have begun to investigate the phenomenon. In 1997 Gerhard Magnus and Joel Keizer published a minimal mathematical model to describe Ca2+ handling by mitochondria in the pancreatic beta-cell (see The Magnus-Keizer Mitochondrial Ca2+ Handling Model, 1997 (${HTML_EXMPL_MITOCHONDRIAL_CA_HANDLING})). Their kinetic model incorporated six transport mechanisms in the inner mitochondrial membrane, including proton pumping via respiration and proton pumping by the F0F1-ATPase, a proton leak, adenine nucleotide exchange, the Ca2+ uniporter and Na+/Ca2+ exchange. In their 1998 model, Gerhard Magnus and Joel Keizer continue their development of a kinetic model of bursting electrical activity in the pancreatic beta-cell. Their minimal model of Ca2+ handling is expanded to include, amongst other factors, the glucose dependence of the rate of production of mitochondrial reducing equivalents (see below).
  //
  // The complete original paper reference is cited below:
  //
  // Model of beta-cell mitochondrial calcium handling and electrical activity. I. Cytoplasmic variables, Gerhard Magnus and Joel Keizer, 1998,American Journal of Physiology, 274, C1158-C1173. PubMed ID: 9575813 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=9575813&dopt=Abstract)
  //
  // The raw CellML description of the model of beta-cell mitochondrial calcium handling can be downloaded in various formats as described in
  //
  // diagram of the mitochondrial Ca2+ handling model
  //
  // A schematic representation of the bursting mechanism assumed by the Magnus-Keizer whole cell model. This diagram shows the plasma membrane currents associated with burst and spike oscillations; the area corresponding to the cytosol gives a simplified description of Ca2+ feedback driving adenine nucleotide concentration oscillations and ATP-sensitive K+ (KATP) channel gating. Uptake of Ca2+ by mitochondria positively affects oxidative phosphorylation by activating pyruvate dehydrogenase (PDH) and other dehydrogenases; futile cycling of Ca2+ across the mitochondrial inner membrane periodically diminishes ATP production by lower the inner membrane voltage (delta_psi). The black arrows represent ion fluxes and the red and green arrows represent inactivation and activation (respectively) of membrane transport and other key processes.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit picoS as
    unit siemens {pref: pico};
  enddef;
  def unit picoS_per_mM as
    unit picoS;
    unit millimolar {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit nanomole_per_min_mV_mg as
    unit mole {pref: nano};
    unit minute {expo: -1};
    unit gram {expo: -1, pref: milli};
    unit millivolt {expo: -1};
  enddef;
  def unit nanomole_per_mg as
    unit mole {pref: nano};
    unit gram {expo: -1, pref: milli};
  enddef;
  def unit nanomole_per_mV_mg as
    unit mole {pref: nano};
    unit gram {expo: -1, pref: milli};
    unit millivolt {expo: -1};
  enddef;
  def unit nanomole_per_min_mg as
    unit mole {pref: nano};
    unit minute {expo: -1};
    unit gram {expo: -1, pref: milli};
  enddef;
  def unit nanomole_per_min_mg_mM as
    unit mole {pref: nano};
    unit minute {expo: -1};
    unit gram {expo: -1, pref: milli};
    unit millimolar {expo: -1};
  enddef;
  def unit micromolar_3 as
    unit micromolar {expo: 3};
  enddef;
  def unit femtoA as
    unit ampere {pref: femto};
  enddef;
  def unit micromolar_per_ms_fA as
    unit micromolar;
    unit millisecond {expo: -1};
    unit ampere {expo: -1, pref: femto};
  enddef;
  def unit per_mM_mV_ms as
    unit millimolar {expo: -1};
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit mM_min_mg_per_ms_nmol as
    unit millimolar;
    unit minute;
    unit gram {pref: milli};
    unit millisecond {expo: -1};
    unit mole {expo: -1, pref: nano};
  enddef;
  def unit uM_min_mg_per_ms_nmol as
    unit micromolar;
    unit minute;
    unit gram {pref: milli};
    unit millisecond {expo: -1};
    unit mole {expo: -1, pref: nano};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: millisecond {pub: out};
  enddef;
  // plasma membrane equations.

  def comp plasma_membrane as
    var V: millivolt {pub: out};
    var R: millijoule_per_mole_kelvin {init: 8314.0, pub: out};
    var T: kelvin {init: 310.0, pub: out};
    var F: coulomb_per_mole {init: 96845.0, pub: out};
    var C: picoF {init: 6157.0};
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_K_dr: femtoA {pub: in};
    var i_K_ATP: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var i_Ca_f: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var i_Ca_s: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0034703
    // isVersionOf: http://identifiers.org/go/GO:0005261
    var i_NS: femtoA {pub: in};
    ode(V, time) = -(i_K_dr+i_K_ATP+i_Ca_f+i_Ca_s+i_NS)/C;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp delayed_rectifier_K_channel_current as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_K_dr: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var V_K: millivolt {init: -75.0, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_K_dr: picoS {init: 5000.0};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var n: dimensionless {priv: in};
    var I: dimensionless {priv: in};
    i_K_dr = g_K_dr*n*I*(V-V_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp delayed_rectifier_K_channel_current_n_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var n: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var n_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var tau_n: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(n, time) = (n_infinity-n)/tau_n;
    n_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((-20.0{millivolt}-V)/5.3{millivolt}));
    tau_n = 50.0{millisecond}/(exp((V+75.0{millivolt})/65.0{millivolt})+exp(-(V+75.0{millivolt})/20.0{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp delayed_rectifier_K_channel_current_I_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var I: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var I_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var tau_I: millisecond {init: 2600.0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(I, time) = -((I-I_infinity)/tau_I);
    I_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((36.0{millivolt}+V)/4.5{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0008282
  def comp K_ATP_channel_current as
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var i_K_ATP: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var g_K_ATP: picoS {init: 70000.0};
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var O_K_ATP: dimensionless;
    var K_dd: micromolar {init: 17.0};
    var K_td: micromolar {init: 26.0};
    var K_tt: micromolar {init: 1.0};
    var MgADP_i: millimolar;
    var V_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var ADP3_i: millimolar {pub: in};
    var ATP4_i: millimolar {pub: in};
    var ADP_i: millimolar {pub: in};
    i_K_ATP = g_K_ATP*O_K_ATP*(V-V_K);
    O_K_ATP = (0.8{dimensionless}*(1.0{dimensionless}+2.0{dimensionless}*MgADP_i/K_dd)+0.89{dimensionless}*sqr(MgADP_i/K_dd))/(sqr(1.0{dimensionless}+MgADP_i/K_dd)*(1.0{dimensionless}+ADP3_i/K_td+ATP4_i/K_tt));
    MgADP_i = 0.55{dimensionless}*0.3{dimensionless}*ADP_i;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005245
  def comp fast_Ca_channel_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Ca_f: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var g_Ca: picoS_per_mM {init: 4116.0, pub: out};
    var O_f: dimensionless {priv: out};
    var k_plus_1: per_millisecond {priv: out};
    var k_minus_1: per_millisecond {priv: out};
    var k_plus_2: per_millisecond {priv: out};
    var k_minus_2: per_millisecond {init: 65.0, priv: out};
    var k_plus_3: per_millisecond {init: 0.02, priv: out};
    var k_minus_3: per_millisecond {init: 0.005, priv: out};
    var Ca_o: millimolar {init: 2.5, priv: out, pub: out};
    var Ca_d: millimolar {priv: out};
    var O_infinity: dimensionless {priv: out};
    var tau_Ca_f: millisecond {init: 1.3};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var C: dimensionless {priv: in};
    var B: dimensionless {priv: in};
    i_Ca_f = 0.27{dimensionless}*g_Ca*O_f*(Ca_o*V/(1.0{dimensionless}-exp(2.0{dimensionless}*F*V/(R*T))));
    O_f = 1.0{dimensionless}-(C+B);
    k_plus_1 = O_infinity/tau_Ca_f;
    k_minus_1 = (1.0{dimensionless}-O_infinity)/tau_Ca_f;
    O_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(15.0{millivolt}+V)/6.2{millivolt}));
    Ca_d = -3.02{per_mM_mV_ms}/k_plus_2*(Ca_o*V/(1.0{dimensionless}-exp(2.0{dimensionless}*F*V/(R*T))));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005245
  def comp fast_Ca_channel_current_C_gate as
    var C: dimensionless {pub: out};
    var O_infinity: dimensionless {pub: in};
    var Ca_d: millimolar {pub: in};
    var k_plus_1: per_millisecond {pub: in};
    var k_minus_1: per_millisecond {pub: in};
    var k_plus_2: per_millisecond {pub: in};
    var k_minus_2: per_millisecond {pub: in};
    var Ca_o: millimolar {pub: in};
    var O_f: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(C, time) = k_minus_1*(k_minus_2/(k_plus_2*Ca_d*V+k_minus_2))*O_f-k_plus_1*C;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005245
  def comp fast_Ca_channel_current_B_gate as
    var B: dimensionless {pub: out};
    var Ca_d: millimolar {pub: in};
    var O_f: dimensionless {pub: in};
    var k_plus_2: per_millisecond {pub: in};
    var k_minus_2: per_millisecond {pub: in};
    var k_plus_3: per_millisecond {pub: in};
    var k_minus_3: per_millisecond {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(B, time) = k_plus_3*(k_plus_2*Ca_d*V/(k_plus_2*Ca_d*V+k_minus_2))*O_f-k_minus_3*B;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005245
  def comp slow_Ca_channel_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Ca_s: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var O_s: dimensionless;
    var g_Ca: picoS_per_mM {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ca_o: millimolar {pub: in};
    var J: dimensionless {priv: in};
    i_Ca_s = 0.73{dimensionless}*g_Ca*O_s*(Ca_o*V/(1.0{dimensionless}-exp(2.0{dimensionless}*F*V/(R*T))));
    O_s = J/(1.0{dimensionless}+exp(-(11.0{millivolt}+V)/3.6{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005245
  def comp slow_Ca_channel_current_J_gate as
    var J: dimensionless {pub: out};
    var J_infinity: dimensionless;
    var tau_J: millisecond;
    var TJ: millisecond {init: 50000.0};
    var Tmin: millisecond {init: 1500.0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(J, time) = -((J-J_infinity)/tau_J);
    J_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+50.0{millivolt})/6.3{millivolt}));
    tau_J = TJ/(exp((V+50.0{millivolt})/6.3{millivolt})+exp(-(V+50.0{millivolt})/6.3{millivolt}))+Tmin;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0034703
  // isVersionOf: http://identifiers.org/go/GO:0005261
  def comp non_selective_cation_channel_current as
    // isVersionOf: http://identifiers.org/go/GO:0034703
    // isVersionOf: http://identifiers.org/go/GO:0005261
    var i_NS: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0034703
    // isVersionOf: http://identifiers.org/go/GO:0005261
    var K_NS: millimolar {init: 0.5};
    // isVersionOf: http://identifiers.org/go/GO:0034703
    // isVersionOf: http://identifiers.org/go/GO:0005261
    var g_NS: picoS_per_mM {init: 24.0};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ca_o: millimolar {pub: in};
    var ATP_i: millimolar {pub: in};
    i_NS = g_NS/(1.0{dimensionless}+K_NS/ATP_i)*(Ca_o*V/(1.0{dimensionless}-exp(2.0{dimensionless}*F*V/(R*T))));
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
  def comp cytosolic_ADP as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_i: millimolar {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_i: millimolar {pub: out};
    var glu: millimolar {pub: out};
    var gamma1: mM_min_mg_per_ms_nmol {init: 0.00000153};
    var tau_hyd: second {init: 50.0};
    var n_hyd: dimensionless {init: 2.7};
    var J_hyd: nanomole_per_min_mg;
    var k_hyd: nanomole_per_min_mg_mM {init: 41.0};
    var delta_J_hyd: nanomole_per_min_mg;
    var delta_J_hyd_ss: nanomole_per_min_mg;
    var delta_J_hyd_max: nanomole_per_min_mg {init: 30.1};
    var Jp_gly: nanomole_per_min_mg;
    var delta_J_gly_total: nanomole_per_min_mg;
    var K_glu: millimolar {init: 8.7};
    // isVersionOf: http://identifiers.org/go/GO:0015297
    var J_ANT: nanomole_per_min_mg {pub: in};
    var time: millisecond {pub: in};
    ode(ADP_i, time) = gamma1*(J_hyd-(J_ANT+Jp_gly));
    ATP_i = 2.0{millimolar}-ADP_i;
    J_hyd = k_hyd*ATP_i+delta_J_hyd;
    Jp_gly = 2.0{dimensionless}*delta_J_gly_total;
    ode(delta_J_hyd, time) = 1.0{dimensionless}/tau_hyd*(delta_J_hyd_ss-delta_J_hyd);
    delta_J_hyd_ss = delta_J_hyd_max/(1.0{dimensionless}+pow(K_glu/glu, n_hyd));
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  def comp cytosolic_Ca as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: micromolar {pub: out};
    var gamma2: uM_min_mg_per_ms_nmol {init: 0.00153};
    var alpha: micromolar_per_ms_fA {init: 0.00000678};
    var k_Ca: per_millisecond {init: 0.19};
    var f_i: dimensionless {init: 0.01};
    // isVersionOf: http://identifiers.org/go/GO:0034703
    // isVersionOf: http://identifiers.org/go/GO:0005261
    var i_NS: femtoA {pub: in};
    var i_Ca_f: femtoA {pub: in};
    var i_Ca_s: femtoA {pub: in};
    var J_uni: nanomole_per_min_mg {pub: in};
    var J_NaCa: nanomole_per_min_mg {pub: in};
    var time: millisecond {pub: in};
    ode(Ca_i, time) = f_i*(-alpha*(i_NS+i_Ca_f+i_Ca_s)-(gamma2*(J_uni-J_NaCa)+k_Ca*Ca_i));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0031966
  def comp mitochondrial_membrane as
    var delta_psi: millivolt {init: 50.0, pub: out};
    var proton_motive_force: nanomole_per_min_mg {pub: out};
    var g_H: nanomole_per_min_mV_mg {init: 0.2, pub: out};
    var delta_pH: dimensionless {init: -0.4, pub: out};
    var Cmito: nanomole_per_mV_mg {init: 0.00145};
    var pH_i: dimensionless;
    var pH_m: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var JH_leak: nanomole_per_min_mg {pub: in};
    var JH_res: nanomole_per_min_mg {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0016887
    var JH_F1: nanomole_per_min_mg {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015297
    var J_ANT: nanomole_per_min_mg {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015292
    var J_uni: nanomole_per_min_mg {pub: in};
    var J_NaCa: nanomole_per_min_mg {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(delta_psi, time) = -1.0{dimensionless}/(60000.0{dimensionless}*Cmito)*(-JH_res+JH_F1+J_ANT+JH_leak+J_uni*2.0{dimensionless}+J_NaCa);
    delta_pH = pH_i-pH_m;
    proton_motive_force = V-2.303{dimensionless}*R*T/F*delta_pH;
  enddef;

  def comp proton_pump as
    var JH_res: nanomole_per_min_mg {pub: out};
    var J_o: nanomole_per_min_mg {pub: out};
    var A_res: dimensionless;
    var K_res: millimolar {init: 135000000000000000.0};
    var rho_res: nanomole_per_mg {init: 0.4};
    var r1: dimensionless {init: 0.000000000000000002077};
    var r2: dimensionless {init: 0.000000001728};
    var r3: dimensionless {init: 0.00000000000000000000000001059};
    var ra: per_second {init: 0.0000000006394};
    var rb: per_second {init: 0.0000000000001762};
    var rc1: per_second {init: 0.0000000000000000002656};
    var rc2: per_second {init: 0.000000000000000000000000008632};
    var g: dimensionless {init: 0.85};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:13389
    var NAD_m: nanomolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16908
    var NADH_m: nanomolar {pub: in};
    var delta_pH: dimensionless {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var delta_psi: millivolt {pub: in};
    var time: minute {pub: in};
    JH_res = 360.0{dimensionless}*rho_res*((ra*pow(10.0{dimensionless}, 6.0{dimensionless}*delta_pH)*exp(F*A_res/(R*T))+ra*pow(10.0{dimensionless}, 6.0{dimensionless}*delta_pH)+(-((ra+rb)*exp(g*6.0{dimensionless}*F*V/(R*T)))))/((1.0{dimensionless}+r1*exp(F*A_res/(R*T)))*exp(6.0{dimensionless}*F*delta_psi/(R*T))+(r2+r3*exp(F*A_res/(R*T)))*exp(g*6.0{dimensionless}*F*V/(R*T))));
    J_o = 30.0{dimensionless}*rho_res*(((ra*pow(10.0{dimensionless}, 6.0{dimensionless}*delta_pH)+rc1*exp(6.0{dimensionless}*F*delta_psi/(R*T)))*exp(F*A_res/(R*T))-ra*exp(g*6.0{dimensionless}*F*V/(R*T))+rc2*exp(F*A_res/(R*T))*exp(g*6.0{dimensionless}*F*V/(R*T)))/((1.0{dimensionless}+r1*exp(F*A_res/(R*T)))*exp(6.0{dimensionless}*F*delta_psi/(R*T))+(r2+r3*exp(F*A_res/(R*T)))*exp(g*6.0{dimensionless}*F*V/(R*T))));
    A_res = R*T/F*ln(K_res*sqrt(NADH_m)/sqrt(NAD_m));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp proton_leak as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var JH_leak: nanomole_per_min_mg {pub: out};
    var g_H: nanomole_per_min_mV_mg {pub: in};
    var proton_motive_force: nanomole_per_min_mg {pub: in};
    var time: minute {pub: in};
    JH_leak = g_H*proton_motive_force;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0016887
  // isVersionOf: http://identifiers.org/go/GO:0000275
  // isVersionOf: http://identifiers.org/go/GO:0000276
  def comp F0_F1_ATPase as
    // isVersionOf: http://identifiers.org/go/GO:0016887
    // isVersionOf: http://identifiers.org/go/GO:0000275
    var JH_F1: nanomole_per_min_mg {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0016887
    // isVersionOf: http://identifiers.org/go/GO:0000275
    var Jp_F1: nanomole_per_min_mg {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0016887
    // isVersionOf: http://identifiers.org/go/GO:0000275
    var rho_F1: nanomole_per_mg {init: 0.7};
    // isVersionOf: http://identifiers.org/go/GO:0016887
    // isVersionOf: http://identifiers.org/go/GO:0000275
    var K_F1: millimolar {init: 1710000.0};
    // isVersionOf: http://identifiers.org/go/GO:0016887
    // isVersionOf: http://identifiers.org/go/GO:0000275
    var A_F1: dimensionless;
    var ATP_m_free: nanomolar;
    var ADP_m_free: nanomolar;
    var Pi_m: millimolar {init: 20.0};
    var p1: dimensionless {init: 0.00000001346};
    var p2: dimensionless {init: 0.0000007739};
    var p3: dimensionless {init: 0.00000000000000665};
    var pa: per_second {init: 0.00001656};
    var pb: per_second {init: 0.0000003373};
    var pc1: per_second {init: 0.00000000000009651};
    var pc2: per_second {init: 0.0000000000000000004845};
    var ATP_m: nanomolar {pub: in};
    var ADP_m: nanomolar {pub: in};
    var delta_pH: dimensionless {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var delta_psi: millivolt {pub: in};
    var time: minute {pub: in};
    JH_F1 = -180.0{dimensionless}*rho_F1*((pa*pow(10.0{dimensionless}, 3.0{dimensionless}*delta_pH)*exp(F*A_F1/(R*T))+pb*pow(10.0{dimensionless}, 3.0{dimensionless}*delta_pH)+(-((pa+pb)*exp(3.0{dimensionless}*F*V/(R*T)))))/((1.0{dimensionless}+p1*exp(F*A_F1/(R*T)))*exp(3.0{dimensionless}*F*delta_psi/(R*T))+(p2+p3*exp(F*A_F1/(R*T)))*exp(3.0{dimensionless}*F*V/(R*T))));
    Jp_F1 = -60.0{dimensionless}*rho_F1*(((pa*pow(10.0{dimensionless}, 3.0{dimensionless}*delta_pH)+pc1*exp(3.0{dimensionless}*F*delta_psi/(R*T)))*exp(F*A_F1/(R*T))-pa*exp(3.0{dimensionless}*F*V/(R*T))+pc2*exp(F*A_F1/(R*T))*exp(3.0{dimensionless}*F*V/(R*T)))/((1.0{dimensionless}+p1*exp(F*A_F1/(R*T)))*exp(3.0{dimensionless}*F*delta_psi/(R*T))+(p2+p3*exp(F*A_F1/(R*T)))*exp(3.0{dimensionless}*F*V/(R*T))));
    A_F1 = R*T/F*ln(K_F1*ATP_m/(ADP_m_free*Pi_m));
    ADP_m_free = 0.8{dimensionless}*ADP_m;
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:16908
  def comp mitochondrial_NADH as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16908
    var NADH_m: nanomolar {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:13389
    var NAD_m: nanomolar {pub: out};
    var beta_max: nanomole_per_min_mg_mM {init: 126.0};
    var beta1: per_millimolar {init: 1.66};
    var beta2: per_millimolar {init: 0.0249};
    var beta3: per_millimolar {init: 4.0};
    var beta4: per_millimolar {init: 2.83};
    var beta5: per_millimolar {init: 1.3};
    var beta6: per_millimolar {init: 2.66};
    var beta7: per_millimolar {init: 0.16};
    var u2: dimensionless {init: 1.1};
    var u1: dimensionless {init: 15.0};
    var J_red: nanomole_per_min_mg;
    var delta_J_red_I: nanomole_per_min_mg;
    var delta_J_red_II: nanomole_per_min_mg;
    var J_red_basal: nanomole_per_min_mg {init: 20.0};
    var delta_J_gly_total: nanomole_per_min_mg;
    var f_glu: dimensionless;
    var f_PDHa: dimensionless;
    var K_Ca2: micromolar {init: 0.05};
    var J_o: nanomole_per_min_mg {pub: in};
    var glu: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var delta_pH: dimensionless {pub: in};
    var delta_psi: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_m: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0034703
    // isVersionOf: http://identifiers.org/go/GO:0005261
    var i_NS: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_i: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var i_Ca_f: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var i_Ca_s: femtoA {pub: in};
    var time: millisecond {pub: in};
    ode(NADH_m, time) = 1.0{dimensionless}/60000.0{dimensionless}*(J_red-J_o);
    NAD_m = 8.0{nanomole_per_mg}-NADH_m;
    J_red = J_red_basal+delta_J_red_I+0.66{dimensionless}*delta_J_red_II;
    delta_J_red_I = 4.52{dimensionless}*f_glu*delta_J_gly_total;
    delta_J_red_II = 2.84{dimensionless}*f_glu*delta_J_gly_total;
    f_glu = f_PDHa;
    f_PDHa = 1.0{dimensionless}/(1.0{dimensionless}+u2*(1.0{dimensionless}+u1*pow(1.0{dimensionless}+Ca_m/K_Ca2, -2.0{dimensionless})));
    delta_J_gly_total = beta_max*beta2*(1.0{dimensionless}+beta1*glu)*glu*ATP_i/(1.0{dimensionless}+beta3*ATP_i+(1.0{dimensionless}+beta4*ATP_i)*(beta5*glu)+(1.0{dimensionless}+beta6*ATP_i)*(beta7*sqr(glu)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0006854
  def comp ATP_ADP_exchange as
    // isVersionOf: http://identifiers.org/go/GO:0015297
    var J_ANT: nanomole_per_min_mg {pub: out};
    var ADP3_i: nanomolar {pub: out};
    var ATP4_i: nanomolar {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0015297
    var Jmax_ANT: nanomole_per_min_mg {init: 1000.0};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_m: nanomolar;
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP4_m: nanomolar;
    var ADP3_m: nanomolar;
    var f: dimensionless {init: 0.5};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_i: nanomolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_i: nanomolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_m: nanomolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0016887
    // isVersionOf: http://identifiers.org/go/GO:0000275
    var Jp_F1: nanomole_per_min_mg {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: minute {pub: in};
    J_ANT = Jmax_ANT*((1.0{dimensionless}-ATP4_i*ADP3_m/(ADP3_i*ATP4_m)*exp(-F*V/(R*T)))/((1.0{dimensionless}+ATP4_i/ADP3_i*exp(-f*F*V/(R*T)))*(1.0{dimensionless}+ADP3_m/ATP4_m)));
    ADP3_m = 0.45{dimensionless}*0.8{dimensionless}*ADP_m;
    ADP3_i = 0.45{dimensionless}*0.3{dimensionless}*ADP_i;
    ATP4_m = 0.05{dimensionless}*ATP_m;
    ATP4_i = 0.05{dimensionless}*ATP_i;
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
  def comp mitochondrial_ADP as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_m: nanomolar {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_m: nanomolar {pub: out};
    var Jp_TCA: nanomole_per_min_mg;
    var Jp_F1: nanomole_per_min_mg {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015297
    var J_ANT: nanomole_per_min_mg {pub: in};
    var time: second {pub: in};
    ode(ADP_m, time) = 1.0{dimensionless}/60000.0{dimensionless}*(J_ANT-(Jp_TCA+Jp_F1));
    ATP_m = 12.0{dimensionless}-ADP_m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0015292
  def comp Ca_uniporter as
    // isVersionOf: http://identifiers.org/go/GO:0015292
    var J_uni: nanomole_per_min_mg {pub: out};
    var delta_psi_offset: millivolt {init: 91.0, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0015292
    var Jmax_uni: nanomole_per_min_mg {init: 400.0};
    var K_trans: micromolar {init: 6.0};
    var K_act: micromolar {init: 0.38};
    var L: dimensionless {init: 50.0};
    var na: dimensionless {init: 2.8};
    var Ca_i: nanomolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: minute {pub: in};
    J_uni = Jmax_uni*(Ca_i/K_trans*pow(1.0{dimensionless}+Ca_i/K_trans, 3.0{dimensionless})/(pow(1.0{dimensionless}+Ca_i/K_trans, 4.0{dimensionless})-L/pow(1.0{dimensionless}+Ca_i/K_act, na)))*(2.0{dimensionless}*F*(V-delta_psi_offset)/(R*T)/(1.0{dimensionless}-exp(-2.0{dimensionless}*F*(V-delta_psi_offset)/(R*T))));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp NaCa_exchanger as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var J_NaCa: nanomole_per_min_mg {pub: out};
    var fm: dimensionless {init: 0.0003, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var Jmax_NaCa: nanomole_per_min_mg {init: 5.5};
    var Na_i: millimolar {init: 30.0};
    var K_Na: millimolar {init: 9.4};
    var K_Ca: nanomole_per_mg {init: 0.003};
    var b: dimensionless {init: 0.5};
    var n: dimensionless {init: 3.0};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_m: nanomolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015292
    var J_uni: nanomole_per_min_mg {pub: in};
    var delta_psi_offset: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: minute {pub: in};
    J_NaCa = Jmax_NaCa*(exp(b*F*(V-delta_psi_offset)/(R*T))/(pow(1.0{dimensionless}+K_Na/Na_i, n)*(1.0{dimensionless}+K_Ca/Ca_m)));
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  def comp mitochondrial_Ca as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_m: micromolar {pub: out};
    var fm: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015292
    var J_uni: nanomole_per_min_mg {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var J_NaCa: nanomole_per_min_mg {pub: in};
    var time: second {pub: in};
    ode(Ca_m, time) = fm/60000.0{dimensionless}*(J_uni-J_NaCa);
  enddef;

  def group as containment for
    comp plasma_membrane incl
      comp delayed_rectifier_K_channel_current incl
        comp delayed_rectifier_K_channel_current_n_gate;
        comp delayed_rectifier_K_channel_current_I_gate;
      endcomp;
      comp K_ATP_channel_current;
      comp fast_Ca_channel_current incl
        comp fast_Ca_channel_current_C_gate;
        comp fast_Ca_channel_current_B_gate;
      endcomp;
      comp slow_Ca_channel_current incl
        comp slow_Ca_channel_current_J_gate;
      endcomp;
      comp non_selective_cation_channel_current;
      comp cytosolic_ADP;
      comp cytosolic_Ca;
      comp mitochondrial_membrane incl
        comp mitochondrial_NADH;
        comp mitochondrial_ADP;
        comp mitochondrial_Ca;
        comp proton_pump;
        comp proton_leak;
        comp F0_F1_ATPase;
        comp ATP_ADP_exchange;
        comp Ca_uniporter;
        comp NaCa_exchanger;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp delayed_rectifier_K_channel_current incl
      comp delayed_rectifier_K_channel_current_n_gate;
      comp delayed_rectifier_K_channel_current_I_gate;
    endcomp;
    comp fast_Ca_channel_current incl
      comp fast_Ca_channel_current_C_gate;
      comp fast_Ca_channel_current_B_gate;
    endcomp;
    comp slow_Ca_channel_current incl
      comp slow_Ca_channel_current_J_gate;
    endcomp;
  enddef;
  def map between plasma_membrane and environment for
    vars time and time;
  enddef;
  def map between mitochondrial_membrane and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_channel_current and environment for
    vars time and time;
  enddef;
  def map between K_ATP_channel_current and environment for
    vars time and time;
  enddef;
  def map between fast_Ca_channel_current and environment for
    vars time and time;
  enddef;
  def map between slow_Ca_channel_current and environment for
    vars time and time;
  enddef;
  def map between non_selective_cation_channel_current and environment for
    vars time and time;
  enddef;
  def map between cytosolic_ADP and environment for
    vars time and time;
  enddef;
  def map between cytosolic_Ca and environment for
    vars time and time;
  enddef;
  def map between mitochondrial_NADH and environment for
    vars time and time;
  enddef;
  def map between mitochondrial_ADP and environment for
    vars time and time;
  enddef;
  def map between mitochondrial_Ca and environment for
    vars time and time;
  enddef;
  def map between environment and proton_pump for
    vars time and time;
  enddef;
  def map between environment and proton_leak for
    vars time and time;
  enddef;
  def map between environment and F0_F1_ATPase for
    vars time and time;
  enddef;
  def map between environment and ATP_ADP_exchange for
    vars time and time;
  enddef;
  def map between environment and Ca_uniporter for
    vars time and time;
  enddef;
  def map between environment and NaCa_exchanger for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_channel_current and plasma_membrane for
    vars V and V;
    vars i_K_dr and i_K_dr;
  enddef;
  def map between K_ATP_channel_current and plasma_membrane for
    vars V and V;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between fast_Ca_channel_current and plasma_membrane for
    vars V and V;
    vars i_Ca_f and i_Ca_f;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between slow_Ca_channel_current and plasma_membrane for
    vars V and V;
    vars i_Ca_s and i_Ca_s;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between non_selective_cation_channel_current and plasma_membrane for
    vars V and V;
    vars i_NS and i_NS;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between mitochondrial_membrane and proton_pump for
    vars JH_res and JH_res;
    vars delta_pH and delta_pH;
    vars delta_psi and delta_psi;
  enddef;
  def map between plasma_membrane and proton_pump for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between mitochondrial_membrane and proton_leak for
    vars JH_leak and JH_leak;
    vars g_H and g_H;
    vars proton_motive_force and proton_motive_force;
  enddef;
  def map between mitochondrial_membrane and F0_F1_ATPase for
    vars JH_F1 and JH_F1;
    vars delta_pH and delta_pH;
    vars delta_psi and delta_psi;
  enddef;
  def map between plasma_membrane and F0_F1_ATPase for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between mitochondrial_membrane and ATP_ADP_exchange for
    vars J_ANT and J_ANT;
  enddef;
  def map between plasma_membrane and ATP_ADP_exchange for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between mitochondrial_membrane and Ca_uniporter for
    vars J_uni and J_uni;
  enddef;
  def map between plasma_membrane and Ca_uniporter for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between plasma_membrane and mitochondrial_NADH for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between plasma_membrane and NaCa_exchanger for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between mitochondrial_membrane and NaCa_exchanger for
    vars J_NaCa and J_NaCa;
  enddef;
  def map between mitochondrial_membrane and plasma_membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between delayed_rectifier_K_channel_current and K_ATP_channel_current for
    vars V_K and V_K;
  enddef;
  def map between K_ATP_channel_current and cytosolic_ADP for
    vars ADP_i and ADP_i;
  enddef;
  def map between K_ATP_channel_current and ATP_ADP_exchange for
    vars ADP3_i and ADP3_i;
    vars ATP4_i and ATP4_i;
  enddef;
  def map between fast_Ca_channel_current and cytosolic_Ca for
    vars i_Ca_f and i_Ca_f;
  enddef;
  def map between fast_Ca_channel_current and mitochondrial_NADH for
    vars i_Ca_f and i_Ca_f;
  enddef;
  def map between fast_Ca_channel_current and slow_Ca_channel_current for
    vars g_Ca and g_Ca;
    vars Ca_o and Ca_o;
  enddef;
  def map between fast_Ca_channel_current and non_selective_cation_channel_current for
    vars Ca_o and Ca_o;
  enddef;
  def map between slow_Ca_channel_current and cytosolic_Ca for
    vars i_Ca_s and i_Ca_s;
  enddef;
  def map between slow_Ca_channel_current and mitochondrial_NADH for
    vars i_Ca_s and i_Ca_s;
  enddef;
  def map between cytosolic_ADP and mitochondrial_NADH for
    vars ATP_i and ATP_i;
    vars glu and glu;
  enddef;
  def map between cytosolic_ADP and non_selective_cation_channel_current for
    vars ATP_i and ATP_i;
  enddef;
  def map between cytosolic_ADP and ATP_ADP_exchange for
    vars ATP_i and ATP_i;
    vars ADP_i and ADP_i;
    vars J_ANT and J_ANT;
  enddef;
  def map between mitochondrial_ADP and ATP_ADP_exchange for
    vars ADP_m and ADP_m;
    vars J_ANT and J_ANT;
  enddef;
  def map between F0_F1_ATPase and ATP_ADP_exchange for
    vars Jp_F1 and Jp_F1;
  enddef;
  def map between F0_F1_ATPase and mitochondrial_ADP for
    vars Jp_F1 and Jp_F1;
    vars ATP_m and ATP_m;
    vars ADP_m and ADP_m;
  enddef;
  def map between cytosolic_Ca and Ca_uniporter for
    vars Ca_i and Ca_i;
    vars J_uni and J_uni;
  enddef;
  def map between Ca_uniporter and mitochondrial_Ca for
    vars J_uni and J_uni;
  enddef;
  def map between NaCa_exchanger and Ca_uniporter for
    vars J_uni and J_uni;
    vars delta_psi_offset and delta_psi_offset;
  enddef;
  def map between cytosolic_Ca and NaCa_exchanger for
    vars J_NaCa and J_NaCa;
  enddef;
  def map between cytosolic_Ca and non_selective_cation_channel_current for
    vars i_NS and i_NS;
  enddef;
  def map between mitochondrial_NADH and non_selective_cation_channel_current for
    vars i_NS and i_NS;
  enddef;
  def map between mitochondrial_membrane and mitochondrial_NADH for
    vars delta_psi and delta_psi;
    vars delta_pH and delta_pH;
  enddef;
  def map between mitochondrial_NADH and mitochondrial_Ca for
    vars Ca_m and Ca_m;
  enddef;
  def map between mitochondrial_NADH and proton_pump for
    vars NAD_m and NAD_m;
    vars NADH_m and NADH_m;
    vars J_o and J_o;
  enddef;
  def map between NaCa_exchanger and mitochondrial_Ca for
    vars Ca_m and Ca_m;
    vars fm and fm;
    vars J_NaCa and J_NaCa;
  enddef;
  def map between delayed_rectifier_K_channel_current and delayed_rectifier_K_channel_current_n_gate for
    vars n and n;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_channel_current and delayed_rectifier_K_channel_current_I_gate for
    vars I and I;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_Ca_channel_current and fast_Ca_channel_current_C_gate for
    vars C and C;
    vars time and time;
    vars V and V;
    vars Ca_o and Ca_o;
    vars Ca_d and Ca_d;
    vars O_f and O_f;
    vars O_infinity and O_infinity;
    vars k_plus_1 and k_plus_1;
    vars k_minus_1 and k_minus_1;
    vars k_plus_2 and k_plus_2;
    vars k_minus_2 and k_minus_2;
  enddef;
  def map between fast_Ca_channel_current and fast_Ca_channel_current_B_gate for
    vars B and B;
    vars time and time;
    vars V and V;
    vars Ca_d and Ca_d;
    vars O_f and O_f;
    vars k_plus_3 and k_plus_3;
    vars k_minus_3 and k_minus_3;
    vars k_plus_2 and k_plus_2;
    vars k_minus_2 and k_minus_2;
  enddef;
  def map between slow_Ca_channel_current and slow_Ca_channel_current_J_gate for
    vars J and J;
    vars time and time;
    vars V and V;
  enddef;
enddef;
