def model bertram_satin_zhang_smolen_sherman_2004_version01 as
  // Calcium and Glycolysis Mediate Multiple Bursting Modes in Pancreatic Islets
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model has been rebuilt and coded by translating the authors original XPPAUT.ode file, which can be found at http://www.math.fsu.edu/~bertram/software/islet/BJ_04a.ode. This file runs in PCEnv and COR and produces the expected output. This model has been parameterised for the 'glycolytic bursting' model. Some equations have inconsistent magnitudes due to the fact that time is defined in milliseconds, yet flux is defined in micromolar per second.
  //
  // Model Structure
  //
  // ABSTRACT: Pancreatic islets of Langerhans produce bursts of electrical activity when exposed to stimulatory glucose levels. These bursts often have a regular repeating pattern, with a period of 10-60 s. In some cases, however, the bursts are episodic, clustered into bursts of bursts, which we call compound bursting. Consistent with this are recordings of free Ca2+ concentration, oxygen consumption, mitochondrial membrane potential, and intraislet glucose levels that exhibit very slow oscillations, with faster oscillations superimposed. We describe a new mathematical model of the pancreatic beta-cell that can account for these multimodal patterns. The model includes the feedback of cytosolic Ca2+ onto ion channels that can account for bursting, and a metabolic subsystem that is capable of producing slow oscillations driven by oscillations in glycolysis. This slow rhythm is responsible for the slow mode of compound bursting in the model. We also show that it is possible for glycolytic oscillations alone to drive a very slow form of bursting, which we call "glycolytic bursting." Finally, the model predicts that there is bistability between stationary and oscillatory glycolysis for a range of parameter values. We provide experimental support for this model prediction. Overall, the model can account for a diversity of islet behaviors described in the literature over the past 20 years.
  //
  // Calcium and Glycolysis Mediate Multiple Bursting Modes in Pancreatic Islets, Richard Bertram, Leslie Satin, Min Zhang, Paul Smolen, and Arthur Sherman, 2004, Biophysical Journal, 87, 3074-3087. PubMed ID: 15347584 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=15347584&dopt=Abstract)
  //
  // cell diagram
  //
  // A schematic diagram of the ionic currents and fluxes across the ER and the cell surface membranes which are described by the mathematical model.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit picoS as
    unit siemens {pref: pico};
  enddef;
  def unit femtoF as
    unit farad {pref: femto};
  enddef;
  def unit femtoA as
    unit ampere {pref: femto};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar_per_femtoA_millisecond as
    unit micromolar;
    unit femtoA {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit flux as
    unit micromolar;
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0042391
  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0030322
  def comp membrane as
    var V: millivolt {init: -60, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var IK: femtoA;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var ICa: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var IKCa: femtoA;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0015272
    var IKATP: femtoA {pub: in};
    var Cm: femtoF {init: 5300};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var gK: picoS {init: 2700};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var VK: millivolt {pub: in};
    var n: dimensionless {init: 0};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0015269
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var gKCa: picoS {init: 100};
    var kd: micromolar {init: 0.5};
    var c: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var gCa: picoS {init: 1000};
    var minf: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var VCa: millivolt {init: 25};
    var taun: millisecond {init: 20};
    var time: millisecond {pub: in};
    ode(V, time) = -(IK+ICa+IKCa+IKATP)/Cm;
    IK = gK*n*(V-VK);
    IKCa = gKCa/(1{dimensionless}+sqr(kd/c))*(V-VK);
    ICa = gCa*minf*(V-VCa);
    minf = 1{dimensionless}/(1{dimensionless}+exp(-(20{millivolt}+V)/12{millivolt}));
    ninf = 1{dimensionless}/(1{dimensionless}+exp(-(16{millivolt}+V)/5{millivolt}));
    ode(n, time) = (ninf-n)/taun;
    var ninf: dimensionless;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp calcium_handling as
    var time: millisecond {pub: in};
    var c: micromolar {init: 0.1, pub: out};
    var cer: micromolar {init: 185, pub: out};
    var fcyt: dimensionless {init: 0.01};
    // isVersionOf: http://identifiers.org/fma/FMA:30322
    var Jmem: flux;
    var Jer: flux;
    var fer: dimensionless {init: 0.01};
    var sigmaV: dimensionless {init: 31};
    var pleak: first_order_rate_constant {init: 0.0002};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var Kserca: first_order_rate_constant {init: 0.4};
    var lambdaer: dimensionless {init: 1};
    var epser: dimensionless {init: 1};
    var alpha: micromolar_per_femtoA_millisecond {init: 0.00000450};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var ICa: femtoA {pub: in};
    var kpmca: first_order_rate_constant {init: 0.2};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var Jserca: flux;
    var Jleak: flux;
    ode(c, time) = fcyt*(Jmem+Jer);
    ode(cer, time) = -fer*sigmaV*Jer;
    Jserca = Kserca*c;
    Jleak = pleak*(cer-c);
    Jer = epser*(Jleak-Jserca)/lambdaer;
    Jmem = -(alpha*ICa+kpmca*c);
  enddef;

  def comp glycolysis as
    var time: millisecond {pub: in};
    var rgpdh: flux {pub: out};
    var Rgk: per_second {init: 0.2};
    var atot: micromolar {init: 3000, pub: out};
    var pfkbas: dimensionless {init: 0.06, pub: out};
    var f6p: micromolar {pub: out};
    var lambda: dimensionless {init: 0.005};
    var pfk: micromolar {pub: in};
    var g6p: micromolar {init: 200};
    var fbp: micromolar {init: 40, pub: out};
    f6p = 0.3{dimensionless}*g6p;
    rgpdh = 0.2{flux}*sqrt(fbp/1{micromolar});
    ode(fbp, time) = lambda*(pfk/1{millisecond}-0.5{dimensionless}*rgpdh);
    ode(g6p, time) = lambda*(Rgk*1{micromolar}-pfk/1{second});
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0008443
  def comp pfk as
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0008443
    var pfk: micromolar {pub: out};
    var bottom1: dimensionless {init: 1};
    var pfkbas: dimensionless {pub: in};
    var topa1: dimensionless {init: 0};
    var k1: micromolar {init: 30};
    var k2: micromolar {init: 1};
    var k3: micromolar {init: 50000};
    var k4: micromolar {init: 1000};
    var cat: dimensionless {init: 2};
    var atp: micromolar {pub: in};
    var weight2: dimensionless;
    var topa2: dimensionless;
    var bottom2: dimensionless;
    var f6p: micromolar {pub: in};
    var topa3: dimensionless;
    var weight3: dimensionless;
    var bottom3: dimensionless;
    var famp: dimensionless {init: 0.02};
    var fatp: dimensionless {init: 20};
    var ffbp: dimensionless {init: 0.2};
    var fbt: dimensionless {init: 20};
    var fmt: dimensionless {init: 20};
    var weight4: dimensionless;
    var topa4: dimensionless;
    var bottom4: dimensionless;
    var weight5: dimensionless;
    var topa5: dimensionless;
    var bottom5: dimensionless;
    var weight6: dimensionless;
    var topa6: dimensionless;
    var bottom6: dimensionless;
    var weight7: dimensionless;
    var topa7: dimensionless;
    var bottom7: dimensionless;
    var weight8: dimensionless;
    var topa8: dimensionless;
    var bottom8: dimensionless;
    var weight9: dimensionless;
    var topa9: dimensionless;
    var bottom9: dimensionless;
    var weight10: dimensionless;
    var topa10: dimensionless;
    var bottom10: dimensionless;
    var weight11: dimensionless;
    var topa11: dimensionless;
    var bottom11: dimensionless;
    var weight12: dimensionless;
    var topa12: dimensionless;
    var bottom12: dimensionless;
    var weight13: dimensionless;
    var topa13: dimensionless;
    var bottom13: dimensionless;
    var weight14: dimensionless;
    var topa14: dimensionless;
    var bottom14: dimensionless;
    var weight15: dimensionless;
    var topa15: dimensionless;
    var bottom15: dimensionless;
    var weight16: dimensionless;
    var topa16: dimensionless;
    var bottom16: dimensionless;
    pfk = 1{micromolar}*((pfkbas*cat*topa16+cat*topb)/bottom16);
    weight2 = sqr(atp)/(k4*1{micromolar});
    topa2 = topa1;
    bottom2 = bottom1+weight2;
    weight3 = sqr(f6p)/(k3*1{micromolar});
    topa3 = topa2+weight3;
    bottom3 = bottom2+weight3;
    weight4 = sqr(f6p*atp)/(fatp*k3*k4*sqr(1{micromolar}));
    topa4 = topa3+weight4;
    bottom4 = bottom3+weight4;
    weight5 = fbp/k2;
    topa5 = topa4;
    bottom5 = bottom4+weight5;
    weight6 = fbp*sqr(atp)/(k2*k4*fbt*1{micromolar});
    topa6 = topa5;
    bottom6 = bottom5+weight6;
    weight7 = fbp*sqr(f6p)/(k2*k3*ffbp*1{micromolar});
    topa7 = topa6+weight7;
    bottom7 = bottom6+weight7;
    weight8 = fbp*sqr(f6p)*sqr(atp)/(k2*k3*k4*ffbp*fbt*fatp*sqr(1{micromolar}));
    topa8 = topa7+weight8;
    bottom8 = bottom7+weight8;
    weight9 = amp/k1;
    topa9 = topa8;
    bottom9 = bottom8+weight9;
    weight10 = amp*sqr(atp)/(k1*k4*fmt*1{micromolar});
    topa10 = topa9;
    bottom10 = bottom9+weight10;
    weight11 = amp*sqr(f6p)/(k1*k3*famp*1{micromolar});
    topa11 = topa10+weight11;
    bottom11 = bottom10+weight11;
    weight12 = amp*sqr(f6p)*sqr(atp)/(k1*k3*k4*famp*fmt*fatp*sqr(1{micromolar}));
    topa12 = topa11+weight12;
    bottom12 = bottom11+weight12;
    weight13 = amp*fbp/(k1*k2);
    topa13 = topa12;
    bottom13 = bottom12+weight13;
    weight14 = amp*fbp*sqr(atp)/(k1*k2*k4*fbt*fmt*1{micromolar});
    topa14 = topa13;
    bottom14 = bottom13+weight14;
    weight15 = amp*fbp*sqr(f6p)/(k1*k2*k3*ffbp*famp*1{micromolar});
    topa15 = topa14;
    bottom15 = bottom14+weight15;
    topb = weight15;
    weight16 = amp*fbp*sqr(f6p)*sqr(atp)/(k1*k2*k3*k4*ffbp*famp*fbt*fmt*fatp*sqr(1{micromolar}));
    topa16 = topa15+weight16;
    bottom16 = bottom15+weight16;
    var topb: dimensionless;
    var fbp: micromolar {pub: in};
    var amp: micromolar {pub: in};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0015272
  def comp KATP as
    var time: millisecond {pub: in};
    var mgadp: micromolar;
    var adp3m: micromolar;
    var atp4m: micromolar;
    var topo: dimensionless;
    var bottomo: dimensionless;
    var katpo: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var IKATP: femtoA {pub: out};
    var VK: millivolt {init: -75, pub: out};
    var gkatpbar: picoS {init: 27000};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var atp: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var adp: micromolar {pub: in};
    var kdd: dimensionless {init: 17};
    var ktd: dimensionless {init: 26};
    var ktt: dimensionless {init: 1};
    mgadp = 0.165{dimensionless}*adp;
    adp3m = 0.135{dimensionless}*adp;
    atp4m = 0.05{dimensionless}*atp;
    topo = 0.08{dimensionless}*(1{dimensionless}+2{dimensionless}*mgadp/(kdd*1{micromolar}))+0.89{dimensionless}*sqr(mgadp/(kdd*1{micromolar}));
    bottomo = sqr(1{dimensionless}+mgadp/(kdd*1{micromolar}))*(1{dimensionless}+adp3m/(ktd*1{micromolar})+atp4m/(ktt*1{micromolar}));
    katpo = topo/bottomo;
    IKATP = gkatpbar*katpo*(V-VK);
    var V: millivolt {pub: in};
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:82740
  def comp nucleotides as
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var atp: micromolar {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var adp: micromolar {init: 780, pub: out};
    var fback: dimensionless;
    var taua: dimensionless {init: 300000};
    var r1: micromolar {init: 0.35};
    var c: micromolar {pub: in};
    var r: dimensionless {init: 1};
    var y: dimensionless;
    var vg: dimensionless {init: 2.2};
    var rgpdh: flux {pub: in};
    var kg: flux {init: 10};
    ode(adp, time) = (atp-adp*exp(fback*(1{dimensionless}-c/r1)))/(taua*1{millisecond});
    fback = r+y;
    y = vg*(rgpdh/(kg+rgpdh));
    atp = 0.5{dimensionless}*(atot-adp+rad*1{micromolar});
    amp = adp*adp/atp;
    ratio = atp/adp;
    rad = sqrt(sqr(adp-atot)-4{dimensionless}*sqr(adp))/1{micromolar};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16027
    var amp: micromolar {pub: out};
    var rad: dimensionless;
    var ratio: dimensionless;
    var atot: micromolar {pub: in};
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between calcium_handling and membrane for
    vars c and c;
    vars ICa and ICa;
  enddef;
  def map between environment and calcium_handling for
    vars time and time;
  enddef;
  def map between environment and glycolysis for
    vars time and time;
  enddef;
  def map between environment and pfk for
    vars time and time;
  enddef;
  def map between glycolysis and pfk for
    vars pfkbas and pfkbas;
    vars f6p and f6p;
    vars fbp and fbp;
    vars pfk and pfk;
  enddef;
  def map between nucleotides and pfk for
    vars atp and atp;
    vars amp and amp;
  enddef;
  def map between environment and KATP for
    vars time and time;
  enddef;
  def map between nucleotides and KATP for
    vars atp and atp;
    vars adp and adp;
  enddef;
  def map between environment and nucleotides for
    vars time and time;
  enddef;
  def map between calcium_handling and nucleotides for
    vars c and c;
  enddef;
  def map between glycolysis and nucleotides for
    vars rgpdh and rgpdh;
    vars atot and atot;
  enddef;
  def map between membrane and KATP for
    vars V and V;
    vars VK and VK;
    vars IKATP and IKATP;
  enddef;
enddef;
