<?xml version='1.0'?>
<!--  FILE :  marhl_model_2000.xml

CREATED :  4th April 2002

LAST MODIFIED : 9th April 2003

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Marhl et al's
2000 model of Ca2+ oscillations and the role of mitochondria and cytosolic proteins.

CHANGES:  
  18/07/2002 - CML - Added more metadata.
  09/04/2003 - AAC - Added publication date information.  
-->
<model cmeta:id="marhl_2000" name="marhl_2000" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    <documentation xmlns="http://cellml.org/tmp-documentation">
        <article>
            <articleinfo>
                <title>Complex Calcium Oscillations and the Role of Mitochondria and Cytosolic Proteins</title>
                <author>
                    <firstname>Catherine</firstname>
                    <surname>Lloyd</surname>
                    <affiliation>
                        <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
                    </affiliation>
                </author>
            </articleinfo>
            <section id="sec_status">
                <title>Model Status</title>
                <para>
            This CellML model runs in both OpenCell and COR to recreate the published results. The units have been checked and are consistent.
          </para>
            </section>
            <sect1 id="sec_structure">
                <title>Model Structure</title>
                <para>
ABSTRACT: Intracellular calcium oscillations, which are oscillatory changes of cytosolic calcium concentration in response to agonist stimulation, are experimentally well observed in various living cells. Simple calcium oscillations represent the most common pattern and many mathematical models have been published to describe this type of oscillation. On the other hand, relatively few theoretical studies have been proposed to give an explanation of complex intracellular calcium oscillations, such as bursting and chaos. In this paper, we develop a new possible mechanism for complex calcium oscillations based on the interplay between three calcium stores in the cell: the endoplasmic reticulum (ER), mitochondria and cytosolic proteins. The majority ( approximately 80%) of calcium released from the ER is first very quickly sequestered by mitochondria. Afterwards, a much slower release of calcium from the mitochondria serves as the calcium supply for the intermediate calcium exchanges between the ER and the cytosolic proteins causing bursting calcium oscillations. Depending on the permeability of the ER channels and on the kinetic properties of calcium binding to the cytosolic proteins, different patterns of complex calcium oscillations appear. With our model, we are able to explain simple calcium oscillations, bursting and chaos. Chaos is also observed for calcium oscillations in the bursting mode.
</para>
                <para>
The original paper reference is cited below:
</para>
                <para>
Complex calcium oscillations and the role of mitochondria and cytosolic proteins, Marko Marhl, Thomas Haberichter, Milan Brumen and Reinhart Heinrich, 2000, <emphasis>Biosystems</emphasis>, 57, 75-86.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11004387&amp;dopt=Abstract">PubMed ID: 11004387</ulink>
                </para>
                <informalfigure float="0" id="fig_cell_diagram">
                    <mediaobject>
                        <imageobject>
                            <objectinfo>
                                <title>cell schematic for the model</title>
                            </objectinfo>
                            <imagedata fileref="marhl_2000.png"/>
                        </imageobject>
                    </mediaobject>
                    <caption>Schematic diagram of the model sysytem.</caption>
                </informalfigure>
            </sect1>
        </article>
    </documentation>
    <units name="micromolar">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="flux">
        <unit units="micromolar"/>
        <unit exponent="-1" units="second"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="second"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="micromolar"/>
        <unit exponent="-1" units="second"/>
    </units>
    <component name="environment">
        <variable name="time" public_interface="out" units="second"/>
    </component>
    <component cmeta:id="id_000000001" name="total_calcium">
        <variable cmeta:id="total_calcium_Ca_Pr" name="Ca_Pr" public_interface="out" units="micromolar"/>
        <variable cmeta:id="id_000000002" initial_value="90.0" name="Ca_tot" units="micromolar"/>
        <variable name="rho_ER" public_interface="in" units="dimensionless"/>
        <variable name="beta_ER" public_interface="in" units="dimensionless"/>
        <variable name="rho_m" public_interface="in" units="dimensionless"/>
        <variable name="beta_m" public_interface="in" units="dimensionless"/>
        <variable cmeta:id="id_000000003" name="Ca_cyt" public_interface="in" units="micromolar"/>
        <variable cmeta:id="id_000000004" name="Ca_ER" public_interface="in" units="micromolar"/>
        <variable cmeta:id="id_000000005" name="Ca_m" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="Ca_Pr_calculation">
                <eq/>
                <ci> Ca_Pr </ci>
                <apply>
                    <minus/>
                    <ci> Ca_tot </ci>
                    <apply>
                        <plus/>
                        <ci> Ca_cyt </ci>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <ci> rho_ER </ci>
                                <ci> beta_ER </ci>
                            </apply>
                            <ci> Ca_ER </ci>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <ci> rho_m </ci>
                                <ci> beta_m </ci>
                            </apply>
                            <ci> Ca_m </ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000006" name="total_protein">
        <variable cmeta:id="id_000000007" name="Pr" public_interface="out" units="micromolar"/>
        <variable cmeta:id="id_000000008" initial_value="120.0" name="Pr_tot" units="micromolar"/>
        <variable cmeta:id="id_000000009" name="Ca_Pr" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="Pr_calculation">
                <eq/>
                <ci> Pr </ci>
                <apply>
                    <minus/>
                    <ci> Pr_tot </ci>
                    <ci> Ca_Pr </ci>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000010" name="cytosolic_calcium">
        <variable initial_value="0.05" name="Ca_cyt" public_interface="out" units="micromolar"/>
        <variable initial_value="0.1" name="k_plus" units="second_order_rate_constant"/>
        <variable initial_value="0.01" name="k_minus" units="first_order_rate_constant"/>
        <variable name="Pr" public_interface="in" units="micromolar"/>
        <variable name="Ca_Pr" public_interface="in" units="micromolar"/>
        <variable name="J_ch" public_interface="in" units="flux"/>
        <variable cmeta:id="id_000000015" name="J_leak" public_interface="in" units="flux"/>
        <variable cmeta:id="id_000000019" name="J_pump" public_interface="in" units="flux"/>
        <variable name="J_out" public_interface="in" units="flux"/>
        <variable name="J_in" public_interface="in" units="flux"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="Ca_cyt_diff_eq">
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci> time </ci>
                    </bvar>
                    <ci> Ca_cyt </ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci> J_ch </ci>
                        <ci> J_leak </ci>
                        <ci> J_out </ci>
                        <apply>
                            <times/>
                            <ci> k_minus </ci>
                            <ci> Ca_Pr </ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <ci> J_pump </ci>
                        <ci> J_in </ci>
                        <apply>
                            <times/>
                            <ci> k_plus </ci>
                            <ci> Ca_cyt </ci>
                            <ci> Pr </ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000011" name="ER_calcium">
        <variable cmeta:id="id_000000012" initial_value="1.0" name="Ca_ER" public_interface="out" units="micromolar"/>
        <variable cmeta:id="id_000000013" initial_value="0.01" name="rho_ER" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="id_000000014" initial_value="0.0025" name="beta_ER" public_interface="out" units="dimensionless"/>
        <variable name="J_ch" public_interface="in" units="flux"/>
        <variable cmeta:id="id_000000016" name="J_leak" public_interface="in" units="flux"/>
        <variable cmeta:id="id_000000020" name="J_pump" public_interface="in" units="flux"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="Ca_ER_diff_eq">
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci> time </ci>
                    </bvar>
                    <ci> Ca_ER </ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <ci> beta_ER </ci>
                        <ci> rho_ER </ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci> J_pump </ci>
                        <apply>
                            <plus/>
                            <ci> J_ch </ci>
                            <ci> J_leak </ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="mitochondrial_calcium">
        <variable initial_value="0.4" name="Ca_m" public_interface="out" units="micromolar"/>
        <variable initial_value="0.01" name="rho_m" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0025" name="beta_m" public_interface="out" units="dimensionless"/>
        <variable name="J_in" public_interface="in" units="flux"/>
        <variable name="J_out" public_interface="in" units="flux"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="Ca_m_diff_eq">
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci> time </ci>
                    </bvar>
                    <ci> Ca_m </ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <ci> beta_m </ci>
                        <ci> rho_m </ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci> J_in </ci>
                        <ci> J_out </ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000022" name="ATP_dependent_Ca_uptake_into_the_ER">
        <variable cmeta:id="ATP_dependent_Ca_uptake_into_the_ER_J_pump" name="J_pump" public_interface="out" units="flux"/>
        <variable cmeta:id="id_000000021" initial_value="20.0" name="k_pump" units="first_order_rate_constant"/>
        <variable name="Ca_cyt" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="J_pump_calculation">
                <eq/>
                <ci> J_pump </ci>
                <apply>
                    <times/>
                    <ci> k_pump </ci>
                    <ci> Ca_cyt </ci>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000023" name="Ca_efflux_from_the_ER">
        <variable cmeta:id="Ca_efflux_from_the_ER_J_ch" name="J_ch" public_interface="out" units="flux"/>
        <variable cmeta:id="id_000000024" initial_value="4100.0" name="k_ch" units="first_order_rate_constant"/>
        <variable initial_value="5.0" name="K1" units="micromolar"/>
        <variable name="Ca_cyt" public_interface="in" units="micromolar"/>
        <variable name="Ca_ER" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="J_ch_calculation">
                <eq/>
                <ci> J_ch </ci>
                <apply>
                    <times/>
                    <ci> k_ch </ci>
                    <apply>
                        <divide/>
                        <apply>
                            <power/>
                            <ci> Ca_cyt </ci>
                            <cn cellml:units="dimensionless" xmlns:cellml="http://www.cellml.org/cellml/1.0#"> 2.0 </cn>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <power/>
                                <ci> K1 </ci>
                                <cn cellml:units="dimensionless" xmlns:cellml="http://www.cellml.org/cellml/1.0#"> 2.0 </cn>
                            </apply>
                            <apply>
                                <power/>
                                <ci> Ca_cyt </ci>
                                <cn cellml:units="dimensionless" xmlns:cellml="http://www.cellml.org/cellml/1.0#"> 2.0 </cn>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <ci> Ca_ER </ci>
                        <ci> Ca_cyt </ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000018" name="Ca_leak_flux_from_the_ER">
        <variable cmeta:id="Ca_leak_flux_from_the_ER_J_leak" name="J_leak" public_interface="out" units="flux"/>
        <variable cmeta:id="id_000000017" initial_value="0.05" name="k_leak" units="first_order_rate_constant"/>
        <variable name="Ca_cyt" public_interface="in" units="micromolar"/>
        <variable name="Ca_ER" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="J_leak_calculation">
                <eq/>
                <ci> J_leak </ci>
                <apply>
                    <times/>
                    <ci> k_leak </ci>
                    <apply>
                        <minus/>
                        <ci> Ca_ER </ci>
                        <ci> Ca_cyt </ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000025" name="mitochondrial_Ca_uptake">
        <variable cmeta:id="mitochondrial_Ca_uptake_J_in" name="J_in" public_interface="out" units="flux"/>
        <variable cmeta:id="id_000000026" initial_value="300.0" name="k_in" units="flux"/>
        <variable initial_value="0.8" name="K2" units="micromolar"/>
        <variable name="Ca_cyt" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="J_in_calculation">
                <eq/>
                <ci> J_in </ci>
                <apply>
                    <times/>
                    <ci> k_in </ci>
                    <apply>
                        <divide/>
                        <apply>
                            <power/>
                            <ci> Ca_cyt </ci>
                            <cn cellml:units="dimensionless" xmlns:cellml="http://www.cellml.org/cellml/1.0#"> 8.0 </cn>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <power/>
                                <ci> K2 </ci>
                                <cn cellml:units="dimensionless" xmlns:cellml="http://www.cellml.org/cellml/1.0#"> 8.0 </cn>
                            </apply>
                            <apply>
                                <power/>
                                <ci> Ca_cyt </ci>
                                <cn cellml:units="dimensionless" xmlns:cellml="http://www.cellml.org/cellml/1.0#"> 8.0 </cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000027" name="mitochondrial_Ca_release">
        <variable name="J_out" public_interface="out" units="flux"/>
        <variable initial_value="125.0" name="k_out" units="first_order_rate_constant"/>
        <variable initial_value="0.00625" name="k_m" units="first_order_rate_constant"/>
        <variable initial_value="5.0" name="K3" units="micromolar"/>
        <variable name="Ca_cyt" public_interface="in" units="micromolar"/>
        <variable name="Ca_m" public_interface="in" units="micromolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="J_out_calculation">
                <eq/>
                <ci> J_out </ci>
                <apply>
                    <times/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <ci> k_out </ci>
                            <apply>
                                <divide/>
                                <apply>
                                    <power/>
                                    <ci> Ca_cyt </ci>
                                    <cn cellml:units="dimensionless" xmlns:cellml="http://www.cellml.org/cellml/1.0#"> 2.0 </cn>
                                </apply>
                                <apply>
                                    <plus/>
                                    <apply>
                                        <power/>
                                        <ci> K3 </ci>
                                        <cn cellml:units="dimensionless" xmlns:cellml="http://www.cellml.org/cellml/1.0#"> 2.0 </cn>
                                    </apply>
                                    <apply>
                                        <power/>
                                        <ci> Ca_cyt </ci>
                                        <cn cellml:units="dimensionless" xmlns:cellml="http://www.cellml.org/cellml/1.0#"> 2.0 </cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <ci> k_m </ci>
                    </apply>
                    <ci> Ca_m </ci>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="cytosolic_calcium" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="ER_calcium" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="mitochondrial_calcium" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="total_calcium" component_2="ER_calcium"/>
        <map_variables variable_1="rho_ER" variable_2="rho_ER"/>
        <map_variables variable_1="beta_ER" variable_2="beta_ER"/>
        <map_variables variable_1="Ca_ER" variable_2="Ca_ER"/>
    </connection>
    <connection>
        <map_components component_1="total_calcium" component_2="mitochondrial_calcium"/>
        <map_variables variable_1="rho_m" variable_2="rho_m"/>
        <map_variables variable_1="beta_m" variable_2="beta_m"/>
        <map_variables variable_1="Ca_m" variable_2="Ca_m"/>
    </connection>
    <connection>
        <map_components component_1="total_calcium" component_2="cytosolic_calcium"/>
        <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
        <map_variables variable_1="Ca_Pr" variable_2="Ca_Pr"/>
    </connection>
    <connection>
        <map_components component_1="total_calcium" component_2="total_protein"/>
        <map_variables variable_1="Ca_Pr" variable_2="Ca_Pr"/>
    </connection>
    <connection>
        <map_components component_1="cytosolic_calcium" component_2="total_protein"/>
        <map_variables variable_1="Pr" variable_2="Pr"/>
    </connection>
    <connection>
        <map_components component_1="cytosolic_calcium" component_2="ATP_dependent_Ca_uptake_into_the_ER"/>
        <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
        <map_variables variable_1="J_pump" variable_2="J_pump"/>
    </connection>
    <connection>
        <map_components component_1="cytosolic_calcium" component_2="Ca_efflux_from_the_ER"/>
        <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
        <map_variables variable_1="J_ch" variable_2="J_ch"/>
    </connection>
    <connection>
        <map_components component_1="cytosolic_calcium" component_2="Ca_leak_flux_from_the_ER"/>
        <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
        <map_variables variable_1="J_leak" variable_2="J_leak"/>
    </connection>
    <connection>
        <map_components component_1="cytosolic_calcium" component_2="mitochondrial_Ca_release"/>
        <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
        <map_variables variable_1="J_out" variable_2="J_out"/>
    </connection>
    <connection>
        <map_components component_1="cytosolic_calcium" component_2="mitochondrial_Ca_uptake"/>
        <map_variables variable_1="Ca_cyt" variable_2="Ca_cyt"/>
        <map_variables variable_1="J_in" variable_2="J_in"/>
    </connection>
    <connection>
        <map_components component_1="ER_calcium" component_2="ATP_dependent_Ca_uptake_into_the_ER"/>
        <map_variables variable_1="J_pump" variable_2="J_pump"/>
    </connection>
    <connection>
        <map_components component_1="ER_calcium" component_2="Ca_efflux_from_the_ER"/>
        <map_variables variable_1="Ca_ER" variable_2="Ca_ER"/>
        <map_variables variable_1="J_ch" variable_2="J_ch"/>
    </connection>
    <connection>
        <map_components component_1="ER_calcium" component_2="Ca_leak_flux_from_the_ER"/>
        <map_variables variable_1="Ca_ER" variable_2="Ca_ER"/>
        <map_variables variable_1="J_leak" variable_2="J_leak"/>
    </connection>
    <connection>
        <map_components component_1="mitochondrial_calcium" component_2="mitochondrial_Ca_release"/>
        <map_variables variable_1="Ca_m" variable_2="Ca_m"/>
        <map_variables variable_1="J_out" variable_2="J_out"/>
    </connection>
    <connection>
        <map_components component_1="mitochondrial_calcium" component_2="mitochondrial_Ca_uptake"/>
        <map_variables variable_1="J_in" variable_2="J_in"/>
    </connection>
    <rdf:RDF>
        <rdf:Description rdf:about="rdf:#a3cd0a8d-7520-490f-a0de-85204d064f73">
            <rdf:type>
                <rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
            </rdf:type>
            <rdf:_1 xml:lang="en">calcium dynamics</rdf:_1>
            <rdf:_2 xml:lang="en">electrophysiology</rdf:_2>
            <rdf:_3 xml:lang="en">mitochondria</rdf:_3>
            <rdf:_4 xml:lang="en">oscillator</rdf:_4>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#918348d1-2e8a-44ff-a480-fea01f35c99f">
            <rdf:type>
                <rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
            </rdf:type>
            <rdf:_1>
                <rdf:Description rdf:about="rdf:#13a4596c-df9b-4b0f-bf61-16b26cb9b805"/>
            </rdf:_1>
            <rdf:_2>
                <rdf:Description rdf:about="rdf:#3473e1b4-dc45-450b-81df-371c72596376"/>
            </rdf:_2>
            <rdf:_3>
                <rdf:Description rdf:about="rdf:#a0959cd9-8e4a-4308-95d6-0258dd9b9c37"/>
            </rdf:_3>
            <rdf:_4>
                <rdf:Description rdf:about="rdf:#62fdc3aa-0065-4775-8a7a-64d80e71325b"/>
            </rdf:_4>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#13a4596c-df9b-4b0f-bf61-16b26cb9b805">
            <rdf:type>
                <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
            </rdf:type>
            <vCard:N>
                <rdf:Description rdf:about="rdf:#0d73188d-74e2-442f-a701-9f606389317e"/>
            </vCard:N>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#3473e1b4-dc45-450b-81df-371c72596376">
            <rdf:type>
                <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
            </rdf:type>
            <vCard:N>
                <rdf:Description rdf:about="rdf:#2e767234-cf0d-4f36-a505-445bf60559b6"/>
            </vCard:N>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#a0959cd9-8e4a-4308-95d6-0258dd9b9c37">
            <rdf:type>
                <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
            </rdf:type>
            <vCard:N>
                <rdf:Description rdf:about="rdf:#8b7bfa3d-2288-4330-812c-d1ad88c28050"/>
            </vCard:N>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#62fdc3aa-0065-4775-8a7a-64d80e71325b">
            <rdf:type>
                <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
            </rdf:type>
            <vCard:N>
                <rdf:Description rdf:about="rdf:#9c5d8eef-f870-4a3e-97c5-778e1199cb20"/>
            </vCard:N>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#c6e4ecca-6605-4d0a-83ee-990976943d4a">
            <dc:subject>
                <rdf:Description rdf:about="rdf:#85b236f8-da84-4531-9983-9b08fc8eafa0"/>
            </dc:subject>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#85b236f8-da84-4531-9983-9b08fc8eafa0">
            <bqs:subject_type xml:lang="en">keyword</bqs:subject_type>
            <rdf:value>
                <rdf:Description rdf:about="rdf:#a3cd0a8d-7520-490f-a0de-85204d064f73"/>
            </rdf:value>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#9c5d8eef-f870-4a3e-97c5-778e1199cb20">
            <vCard:Given xml:lang="en">Reinhart</vCard:Given>
            <vCard:Family xml:lang="en">Heinrich</vCard:Family>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#0d73188d-74e2-442f-a701-9f606389317e">
            <vCard:Given xml:lang="en">Marko</vCard:Given>
            <vCard:Family xml:lang="en">Marhl</vCard:Family>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#bc3dac2b-36a6-46d4-8361-89ec946e2b07">
            <dcterms:W3CDTF xml:lang="en">2000-07</dcterms:W3CDTF>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#928f627c-922a-449b-afd8-47f0b58d7518">
            <vCard:FN xml:lang="en">Catherine Lloyd</vCard:FN>
        </rdf:Description>
        <rdf:Description rdf:about="#marhl_2000">
            <dc:title xml:lang="en">
        A mathematical model of Ca2+ oscillations and the role of mitochondria 
        and cytosolic proteins.
      </dc:title>
            <cmeta:comment>
                <rdf:Description rdf:about="rdf:#c9f01849-ef67-4a53-8305-341f836a29a9"/>
            </cmeta:comment>
            <bqs:reference>
                <rdf:Description rdf:about="rdf:#c6e4ecca-6605-4d0a-83ee-990976943d4a"/>
            </bqs:reference>
            <bqs:reference>
                <rdf:Description rdf:about="rdf:#245da031-b0e2-4e8c-9dba-15ac1540d2c7"/>
            </bqs:reference>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#c9f01849-ef67-4a53-8305-341f836a29a9">
            <dc:creator>
                <rdf:Description rdf:about="rdf:#928f627c-922a-449b-afd8-47f0b58d7518"/>
            </dc:creator>
            <rdf:value xml:lang="en">
          This is the CellML description of Marhl et al's 2000 model of Ca2+ 
          oscillations and the role of mitochondria and cytosolic proteins.  
          With their model they are able to explain simple Ca2+ oscillations, 
          bursting and chaos.
        </rdf:value>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#245da031-b0e2-4e8c-9dba-15ac1540d2c7">
            <bqs:Pubmed_id xml:lang="en">11004387</bqs:Pubmed_id>
            <bqs:JournalArticle>
                <rdf:Description rdf:about="rdf:#15c34166-0a0b-4993-9b82-f750a3060f2b"/>
            </bqs:JournalArticle>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#8b7bfa3d-2288-4330-812c-d1ad88c28050">
            <vCard:Given xml:lang="en">Milan</vCard:Given>
            <vCard:Family xml:lang="en">Brumen</vCard:Family>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#5427c1bd-e1f5-4ce9-b051-5ec9b655c190">
            <dc:title xml:lang="en">BioSystems</dc:title>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#2e767234-cf0d-4f36-a505-445bf60559b6">
            <vCard:Given xml:lang="en">Thomas</vCard:Given>
            <vCard:Family xml:lang="en">Haberichter</vCard:Family>
        </rdf:Description>
        <rdf:Description rdf:about="rdf:#15c34166-0a0b-4993-9b82-f750a3060f2b">
            <dc:creator>
                <rdf:Description rdf:about="rdf:#918348d1-2e8a-44ff-a480-fea01f35c99f"/>
            </dc:creator>
            <dc:title xml:lang="en">
            Complex calcium oscillations and the role of mitochondria and cytosolic proteins
          </dc:title>
            <bqs:volume xml:lang="en">57</bqs:volume>
            <bqs:first_page xml:lang="en">75</bqs:first_page>
            <bqs:Journal>
                <rdf:Description rdf:about="rdf:#5427c1bd-e1f5-4ce9-b051-5ec9b655c190"/>
            </bqs:Journal>
            <dcterms:issued>
                <rdf:Description rdf:about="rdf:#bc3dac2b-36a6-46d4-8361-89ec946e2b07"/>
            </dcterms:issued>
            <bqs:last_page xml:lang="en">86</bqs:last_page>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000001">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#total_calcium_Ca_Pr">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000002">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000003">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000004">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000005">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000006">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/fma/FMA:67257"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000007">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/fma/FMA:67257"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000008">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/fma/FMA:67257"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000009">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/fma/FMA:67257"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000010">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000011">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000012">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000013">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000014">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:39124"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000015">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000016">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#Ca_leak_flux_from_the_ER_J_leak">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000017">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000018">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000019">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070588"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0015085"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0006816"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000020">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070588"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0015085"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0006816"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#ATP_dependent_Ca_uptake_into_the_ER_J_pump">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051208"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070296"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000021">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051208"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070296"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000022">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051208"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070296"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#Ca_efflux_from_the_ER_J_ch">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070296"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000024">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070296"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000023">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0070296"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000025">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051561"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051560"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0006851"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#mitochondrial_Ca_uptake_J_in">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051561"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051560"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0006851"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000026">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051561"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051560"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0006851"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000027">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051562"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0051560"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0006851"/>
            </isVersionOf>
        </rdf:Description>
    </rdf:RDF>
</model>
