<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  irvine_model_1999.xml--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" name="irvine_model_1999" cmeta:id="irvine_model_1999">

<documentation xmlns="http://cellml.org/tmp-documentation">

<article>
  <articleinfo>
  <title>Cardiac Sodium Channel Markov Model with Temperature Dependence and Recovery from Inactivation</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This CellML model is known to run in both PCEnv and COR to recreate the published results.  The units have been checked and they are consistent.  In this particular version of the model the membrane potential is held at -120mV.  Thanks to Joseph Greenstein, Stefan Mann, Alan Garny and Martin Fink for their help in curating this model. There is also a PCEnv session associated with this model.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: A Markov model of the cardiac sodium channel is presented. The model is similar to the CA1 hippocampal
neuron sodium channel model developed by Kuo and Bean (1994. Neuron. 12:819 - 829) with the following modifications: 1)
an additional open state is added; 2) open-inactivated transitions are made voltage-dependent; and 3) channel rate constants
are exponential functions of enthalpy, entropy, and voltage and have explicit temperature dependence. Model parameters are
determined using a simulated annealing algorithm to minimize the error between model responses and various experimental
data sets. The model reproduces a wide range of experimental data including ionic currents, gating currents, tail currents,
steady-state inactivation, recovery from inactivation, and open time distributions over a temperature range of 10C to 25C.
The model also predicts measures of single channel activity such as first latency, probability of a null sweep, and probability of reopening.
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
Cardiac Sodium Channel Markov Model with Temperature Dependence and Recovery from Inactivation, Lisa A. Irvine, M. Saleet Jafri, and Raimond L. Winslow, 1999, <emphasis>Biophysical Journal</emphasis>
, 76, 1868 - 1885. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10096885&amp;dopt=Abstract">PubMed ID: 10096885</ulink>
</para>

<informalfigure float="0" id="state_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>state diagram</title>
    </objectinfo>
    <imagedata fileref="irvine_1999.png"/>
  </imageobject>
</mediaobject>
<caption>State diagram for the cardiac sodium channel Markov model. C0-C4 are closed states, O1 and O2 are open states, C0I-C4I are closed-inactivated states, and I is the inactivated state. All rate constants are voltage- and temperature-dependent except for those governing transitions between closed and closed-inactivated states, which are only temperature-dependent.</caption>
</informalfigure>

</sect1>
</article>
</documentation> 


  
  

  <units name="ms">
    <unit units="second" prefix="milli"/>
  </units>
  
  <units name="V">
    <unit units="volt"/>
  </units>

  <units name="per_V">
    <unit units="volt" exponent="-1"/>
  </units>
  
  <units name="J_mol">
    <unit units="joule"/>
    <unit units="mole" exponent="-1"/>
  </units>

  <units name="J_mol_K">
    <unit units="joule"/>
    <unit units="mole" exponent="-1"/>
    <unit units="kelvin" exponent="-1"/>
  </units>

  <units name="first_order_rate_constant">
    <unit units="second" prefix="milli" exponent="-1"/>
  </units>
  
  <units name="J_K">
    <unit units="joule"/>
    <unit units="kelvin" exponent="-1"/>
  </units>
  
  <units name="K">
    <unit units="kelvin"/>
  </units>

  <units name="J_ms">
    <unit units="joule"/>
    <unit units="second" prefix="milli"/>
  </units>
  
  <units name="C_mol">
    <unit units="coulomb"/>
    <unit units="mole" exponent="-1"/>
  </units>
 
  
  <component name="environment">
    <variable units="ms" public_interface="out" name="time" cmeta:id="environment_time"/>
  </component>

  <component name="membrane">
    <variable units="V" public_interface="out" name="V" initial_value="-0.12"/>
  </component>
  
  <component name="sodium_current">
    <variable units="dimensionless" public_interface="out" name="i_Na" cmeta:id="sodium_current_i_Na"/>
    
    <variable units="V" name="E_Na" initial_value="0.044675"/>
    <variable units="per_V" name="g_Na" initial_value="0.0131"/>
    
    <variable units="ms" public_interface="in" name="time"/>
    <variable units="V" public_interface="in" name="V"/>
    <variable units="dimensionless" public_interface="in" name="P_open"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="1">
      <apply>
        <eq/>
        <ci> i_Na </ci>
        <apply>
          <times/>
          <ci> g_Na </ci>
          <ci> P_open </ci>
          <apply>
            <minus/>
            <ci> V </ci>
            <ci> E_Na </ci>
          </apply>
        </apply>
      </apply>  
    </math>
  </component>
  
  <component name="Markov_model" cmeta:id="Markov_model">
    <variable units="dimensionless" public_interface="out" name="P_open"/>
    
    <variable units="dimensionless" name="O1" initial_value="0.0"/>
    <variable units="dimensionless" name="O2" initial_value="0.0"/>
    <variable units="dimensionless" name="C0" initial_value="1.0"/>
    <variable units="dimensionless" name="C1" initial_value="0.0"/>
    <variable units="dimensionless" name="C2" initial_value="0.0"/>
    <variable units="dimensionless" name="C3" initial_value="0.0"/>
    <variable units="dimensionless" name="C4" initial_value="0.0"/>
    <variable units="dimensionless" name="C0I" initial_value="0.0"/>
    <variable units="dimensionless" name="C1I" initial_value="0.0"/>
    <variable units="dimensionless" name="C2I" initial_value="0.0"/>
    <variable units="dimensionless" name="C3I" initial_value="0.0"/>
    <variable units="dimensionless" name="C4I" initial_value="0.0"/>
    <variable units="dimensionless" name="I" initial_value="0.0"/>
    <variable units="dimensionless" name="a" initial_value="2.5218"/>
     
    <variable units="first_order_rate_constant" public_interface="in" name="alpha"/>
    <variable units="first_order_rate_constant" public_interface="in" name="beta"/>
    <variable units="first_order_rate_constant" public_interface="in" name="cf"/>
    <variable units="first_order_rate_constant" public_interface="in" name="cn"/>
    <variable units="first_order_rate_constant" public_interface="in" name="of"/>
    <variable units="first_order_rate_constant" public_interface="in" name="on"/>
    <variable units="first_order_rate_constant" public_interface="in" name="eta"/>
    <variable units="first_order_rate_constant" public_interface="in" name="gamma"/>
    <variable units="first_order_rate_constant" public_interface="in" name="delta"/>
    <variable units="first_order_rate_constant" public_interface="in" name="epsilon"/>
    <variable units="first_order_rate_constant" public_interface="in" name="omega"/>
    <variable units="first_order_rate_constant" public_interface="in" name="v"/>
    <variable units="first_order_rate_constant" public_interface="in" name="gamma_gamma"/>
    <variable units="first_order_rate_constant" public_interface="in" name="delta_delta"/>
    <variable units="ms" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="2">
      <apply>
        <eq/>
        <ci> P_open </ci>
        <apply>
          <plus/>
          <ci> O1 </ci>
          <ci> O2 </ci>
        </apply>
      </apply>
    </math>
              
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="3">
      <apply>
        <eq/>
            <apply>
          <diff/>
               <bvar>
            <ci>time</ci>
          </bvar>
               <ci>C0</ci>
            </apply>
            <apply>
          <minus/>
               <apply>
            <plus/>
                  <apply>
              <times/>
                     <ci>beta</ci>
                     <ci>C1</ci>
                  </apply>
                  <apply>
              <times/>
                     <ci>cf</ci>
                     <ci>C0I</ci>
                  </apply>
               </apply>
               <apply>
            <times/>
                  <apply>
              <plus/>
                     <ci>cn</ci>
                     <apply>
                <times/>
                        <cn cellml:units="dimensionless">4</cn>
                        <ci>alpha</ci>
                     </apply>
                  </apply>
                  <ci>C0</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="4">
      <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">2</cn>
                     <ci>beta</ci>
                     <ci>C2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">4</cn>
                     <ci>alpha</ci>
                     <ci>C0</ci>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <ci>cf</ci>
                        <ci>a</ci>
                     </apply>
                     <ci>C1I</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>beta</ci>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">3</cn>
                        <ci>alpha</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>cn</ci>
                        <ci>a</ci>
                     </apply>
                  </apply>
                  <ci>C1</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="5">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> C2 </ci>
        </apply>
        <apply>
            <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">3</cn>
                     <ci>beta</ci>
                     <ci>C3</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">3</cn>
                     <ci>alpha</ci>
                     <ci>C1</ci>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <ci>cf</ci>
                        <apply>
                           <power/>
                           <ci>a</ci>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                     <ci>C2I</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>beta</ci>
                     </apply>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>alpha</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>cn</ci>
                        <apply>
                           <power/>
                           <ci>a</ci>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                  </apply>
                  <ci>C2</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="6">
      <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">4</cn>
                     <ci>beta</ci>
                     <ci>C4</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">2</cn>
                     <ci>alpha</ci>
                     <ci>C2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <ci>cf</ci>
                        <apply>
                           <power/>
                           <ci>a</ci>
                           <cn cellml:units="dimensionless">3</cn>
                        </apply>
                     </apply>
                     <ci>C3I</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">3</cn>
                        <ci>beta</ci>
                     </apply>
                     <ci>alpha</ci>
                     <apply>
                        <times/>
                        <ci>cn</ci>
                        <apply>
                           <power/>
                           <ci>a</ci>
                           <cn cellml:units="dimensionless">3</cn>
                        </apply>
                     </apply>
                  </apply>
                  <ci>C3</ci>
               </apply>
            </apply>
         </apply>
	</math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="7">
      <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C4</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>delta</ci>
                     <ci>O1</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>v</ci>
                     <ci>O2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>alpha</ci>
                     <ci>C3</ci>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <ci>cf</ci>
                        <apply>
                           <power/>
                           <ci>a</ci>
                           <cn cellml:units="dimensionless">4</cn>
                        </apply>
                     </apply>
                     <ci>C4I</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">4</cn>
                        <ci>beta</ci>
                     </apply>
                     <ci>gamma</ci>
                     <ci>eta</ci>
                     <apply>
                        <times/>
                        <ci>cn</ci>
                        <apply>
                           <power/>
                           <ci>a</ci>
                           <cn cellml:units="dimensionless">4</cn>
                        </apply>
                     </apply>
                  </apply>
                  <ci>C4</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="8">
      <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>O1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>gamma</ci>
                     <ci>C4</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>omega</ci>
                     <ci>O2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>of</ci>
                     <ci>I</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>delta</ci>
                     <ci>epsilon</ci>
                     <ci>on</ci>
                  </apply>
                  <ci>O1</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="9">
      <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>O2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>epsilon</ci>
                     <ci>O1</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>eta</ci>
                     <ci>C4</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>v</ci>
                     <ci>omega</ci>
                  </apply>
                  <ci>O2</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="10">
      <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C0I</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <ci>beta</ci>
                        <ci>a</ci>
                     </apply>
                     <ci>C1I</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>cn</ci>
                     <ci>C0</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>cf</ci>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">4</cn>
                        <ci>alpha</ci>
                        <ci>a</ci>
                     </apply>
                  </apply>
                  <ci>C0I</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="11">
      <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C1I</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <cn cellml:units="dimensionless">2</cn>
                           <ci>beta</ci>
                        </apply>
                        <ci>a</ci>
                     </apply>
                     <ci>C2I</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">4</cn>
                     <ci>alpha</ci>
                     <ci>a</ci>
                     <ci>C0I</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>cn</ci>
                     <ci>a</ci>
                     <ci>C1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <apply>
                        <divide/>
                        <ci>beta</ci>
                        <ci>a</ci>
                     </apply>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">3</cn>
                        <ci>alpha</ci>
                        <ci>a</ci>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>cf</ci>
                        <ci>a</ci>
                     </apply>
                  </apply>
                  <ci>C1I</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="12">
      <apply>
        <eq/>
            <apply>
          <diff/>
               <bvar>
            <ci>time</ci>
          </bvar>
               <ci>C2I</ci>
            </apply>
            <apply>
          <minus/>
               <apply>
            <plus/>
                  <apply>
              <times/>
                     <apply>
                <divide/>
                        <apply>
                  <times/>
                           <cn cellml:units="dimensionless">3</cn>
                           <ci>beta</ci>
                        </apply>
                        <ci>a</ci>
                     </apply>
                     <ci>C3I</ci>
                  </apply>
                  <apply>
              <times/>
                     <cn cellml:units="dimensionless">3</cn>
                     <ci>alpha</ci>
                     <ci>a</ci>
                     <ci>C1I</ci>
                  </apply>
                  <apply>
              <times/>
                     <ci>cn</ci>
                     <apply>
                <power/>
                        <ci>a</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                     <ci>C2</ci>
                  </apply>
               </apply>
               <apply>
            <times/>
                  <apply>
              <plus/>
                     <apply>
                <divide/>
                        <apply>
                  <times/>
                           <cn cellml:units="dimensionless">2</cn>
                           <ci>beta</ci>
                        </apply>
                        <ci>a</ci>
                     </apply>
                     <apply>
                <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>alpha</ci>
                        <ci>a</ci>
                     </apply>
                     <apply>
                <divide/>
                        <ci>cf</ci>
                        <apply>
                  <power/>
                           <ci>a</ci>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                  </apply>
                  <ci>C2I</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="13">
      <apply>
        <eq/>
            <apply>
          <diff/>
               <bvar>
            <ci>time</ci>
          </bvar>
               <ci>C3I</ci>
            </apply>
            <apply>
          <minus/>
               <apply>
            <plus/>
                  <apply>
              <times/>
                     <apply>
                <divide/>
                        <apply>
                  <times/>
                           <cn cellml:units="dimensionless">4</cn>
                           <ci>beta</ci>
                        </apply>
                        <ci>a</ci>
                     </apply>
                     <ci>C4I</ci>
                  </apply>
                  <apply>
              <times/>
                     <cn cellml:units="dimensionless">2</cn>
                     <ci>alpha</ci>
                     <ci>a</ci>
                     <ci>C2I</ci>
                  </apply>
                  <apply>
              <times/>
                     <ci>cn</ci>
                     <apply>
                <power/>
                        <ci>a</ci>
                        <cn cellml:units="dimensionless">3</cn>
                     </apply>
                     <ci>C3</ci>
                  </apply>
               </apply>
               <apply>
            <times/>
                  <apply>
              <plus/>
                     <apply>
                <divide/>
                        <apply>
                  <times/>
                           <cn cellml:units="dimensionless">3</cn>
                           <ci>beta</ci>
                        </apply>
                        <ci>a</ci>
                     </apply>
                     <apply>
                <times/>
                        <ci>alpha</ci>
                        <ci>a</ci>
                     </apply>
                     <apply>
                <divide/>
                        <ci>cf</ci>
                        <apply>
                  <power/>
                           <ci>a</ci>
                           <cn cellml:units="dimensionless">3</cn>
                        </apply>
                     </apply>
                  </apply>
                  <ci>C3I</ci>
               </apply>
            </apply>
         </apply>
    </math>
      
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="14">
      <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C4I</ci>
            </apply>
            <apply>
          <minus/>
               <apply>
            <plus/>
                  <apply>
              <times/>
                     <ci>delta_delta</ci>
                     <ci>I</ci>
                  </apply>
                  <apply>
              <times/>
                     <ci>alpha</ci>
                     <ci>a</ci>
                     <ci>C3I</ci>
                  </apply>
                  <apply>
              <times/>
                     <ci>cn</ci>
                     <apply>
                <power/>
                        <ci>a</ci>
                        <cn cellml:units="dimensionless">4</cn>
                     </apply>
                     <ci>C4</ci>
                  </apply>
               </apply>
               <apply>
            <times/>
                  <apply>
              <plus/>
                     <apply>
                <divide/>
                        <apply>
                  <times/>
                           <cn cellml:units="dimensionless">4</cn>
                           <ci>beta</ci>
                        </apply>
                        <ci>a</ci>
                     </apply>
                     <ci>gamma_gamma</ci>
                     <apply>
                <divide/>
                        <ci>cf</ci>
                        <apply>
                  <power/>
                           <ci>a</ci>
                           <cn cellml:units="dimensionless">4</cn>
                        </apply>
                     </apply>
                  </apply>
                  <ci>C4I</ci>
               </apply>
            </apply>
         </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="15">
      <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>I</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>gamma_gamma</ci>
                     <ci>C4I</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>on</ci>
                     <ci>O1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>delta_delta</ci>
                     <ci>of</ci>
                  </apply>
                  <ci>I</ci>
               </apply>
            </apply>
         </apply>
    </math>  
  </component> 
  
  <component name="rate_constants">
    <variable units="first_order_rate_constant" public_interface="out" name="alpha"/>
    <variable units="first_order_rate_constant" public_interface="out" name="beta"/>
    <variable units="first_order_rate_constant" public_interface="out" name="cf"/>
    <variable units="first_order_rate_constant" public_interface="out" name="cn"/>
    <variable units="first_order_rate_constant" public_interface="out" name="of"/>
    <variable units="first_order_rate_constant" public_interface="out" name="on"/>
    <variable units="first_order_rate_constant" public_interface="out" name="eta"/>
    <variable units="first_order_rate_constant" public_interface="out" name="gamma"/>
    <variable units="first_order_rate_constant" public_interface="out" name="delta"/>
    <variable units="first_order_rate_constant" public_interface="out" name="epsilon"/>
    <variable units="first_order_rate_constant" public_interface="out" name="omega"/>
    <variable units="first_order_rate_constant" public_interface="out" name="v"/>
    <variable units="first_order_rate_constant" public_interface="out" name="gamma_gamma"/>
    <variable units="first_order_rate_constant" public_interface="out" name="delta_delta"/>

    <variable units="J_mol_K" name="R" initial_value="8.314472"/>
    <variable units="K" name="T" initial_value="286.0"/>
    <variable units="C_mol" name="F" initial_value="96500.0"/> 
    <variable units="J_K" name="k" initial_value="1.3806504E-23"/>
    <variable units="J_ms" name="h" initial_value="6.62607095E-31"/>
    <variable units="dimensionless" name="z_alpha" initial_value="0"/>
    <variable units="dimensionless" name="z_beta" initial_value="-0.9701"/>
    <variable units="dimensionless" name="z_gamma" initial_value="1.5703"/>
    <variable units="dimensionless" name="z_delta" initial_value="-1.3266"/>
    <variable units="dimensionless" name="z_on" initial_value="0.6625"/>
    <variable units="dimensionless" name="z_of" initial_value="0"/>
    <variable units="dimensionless" name="z_gamma_gamma" initial_value="0"/>
    <variable units="dimensionless" name="z_delta_delta" initial_value="-3.5596"/>
    <variable units="dimensionless" name="z_epsilon" initial_value="0"/>
    <variable units="dimensionless" name="z_omega" initial_value="0"/>
    <variable units="dimensionless" name="z_eta" initial_value="1.5717"/>
    <variable units="dimensionless" name="z_v" initial_value="-1.3281"/>
    <variable units="dimensionless" name="z_cn" initial_value="0"/>
    <variable units="dimensionless" name="z_cf" initial_value="0"/>
    <variable units="J_mol" name="delta_H_alpha" initial_value="116900"/>
    <variable units="J_mol" name="delta_H_beta" initial_value="263870"/>
    <variable units="J_mol" name="delta_H_cf" initial_value="57533"/>
    <variable units="J_mol" name="delta_H_cn" initial_value="293270"/>
    <variable units="J_mol" name="delta_H_of" initial_value="79035"/>
    <variable units="J_mol" name="delta_H_on" initial_value="62385"/>
    <variable units="J_mol" name="delta_H_eta" initial_value="150333"/>
    <variable units="J_mol" name="delta_H_gamma" initial_value="200240"/>
    <variable units="J_mol" name="delta_H_delta" initial_value="127970"/>
    <variable units="J_mol" name="delta_H_epsilon" initial_value="79183"/>
    <variable units="J_mol" name="delta_H_omega" initial_value="123020"/>
    <variable units="J_mol" name="delta_H_v" initial_value="121900"/>
    <variable units="J_mol" name="delta_H_gamma_gamma" initial_value="-99967"/>
    <variable units="J_mol" name="delta_H_delta_delta" initial_value="62555"/>
    <variable units="J_mol_K" name="delta_S_alpha" initial_value="224.114"/>
    <variable units="J_mol_K" name="delta_S_beta" initial_value="708.146"/>
    <variable units="J_mol_K" name="delta_S_cf" initial_value="0.00711"/>
    <variable units="J_mol_K" name="delta_S_cn" initial_value="786.217"/>
    <variable units="J_mol_K" name="delta_S_of" initial_value="1.510"/>
    <variable units="J_mol_K" name="delta_S_on" initial_value="39.295"/>
    <variable units="J_mol_K" name="delta_S_eta" initial_value="338.915"/>
    <variable units="J_mol_K" name="delta_S_gamma" initial_value="529.952"/>
    <variable units="J_mol_K" name="delta_S_delta" initial_value="229.205"/>
    <variable units="J_mol_K" name="delta_S_epsilon" initial_value="70.078"/>
    <variable units="J_mol_K" name="delta_S_omega" initial_value="225.175"/>
    <variable units="J_mol_K" name="delta_S_v" initial_value="193.265"/>
    <variable units="J_mol_K" name="delta_S_gamma_gamma" initial_value="-578.317"/>
    <variable units="J_mol_K" name="delta_S_delta_delta" initial_value="-130.639"/>
   
    <variable units="ms" public_interface="in" name="time"/>
    <variable units="V" public_interface="in" name="V"/>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="16">    
      <apply>
        <eq/>
        <ci> alpha </ci>
        <apply>
          <times/>      
		  <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_alpha </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_alpha </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_alpha </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>  
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="17">    
      <apply>
        <eq/>
        <ci> beta </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_beta </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_beta </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_beta </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="18">    
      <apply>
        <eq/>
        <ci> gamma </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_gamma </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_gamma </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_gamma </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="19">    
      <apply>
        <eq/>
        <ci> delta </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_delta </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_delta </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_delta </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>
      
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="20">    
      <apply>
        <eq/>
        <ci> on </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_on </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_on </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_on </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="21">    
      <apply>
        <eq/>
        <ci> of </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_of </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_of </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_of </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math> 

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="22">    
      <apply>
        <eq/>
        <ci> gamma_gamma </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_gamma_gamma </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_gamma_gamma </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_gamma_gamma </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="23">    
      <apply>
        <eq/>
        <ci> delta_delta </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_delta_delta </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_delta_delta </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_delta_delta </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="24">    
      <apply>
        <eq/>
        <ci> epsilon </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_epsilon </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_epsilon </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_epsilon </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="25">    
      <apply>
        <eq/>
        <ci> omega </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_omega </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_omega </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_omega </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math> 

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="26">    
      <apply>
        <eq/>
        <ci> eta </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_eta </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_eta </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_eta </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="27">    
      <apply>
        <eq/>
        <ci> v </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_v </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_v </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_v </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="28">    
      <apply>
        <eq/>
        <ci> cn </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_cn </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_cn </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_cn </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>

    <math xmlns="http://www.w3.org/1998/Math/MathML" id="29">    
      <apply>
        <eq/>
        <ci> cf </ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci> k </ci>
              <ci> T </ci>
            </apply>
            <ci> h </ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
				  <ci> delta_H_cf </ci>
				</apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <apply>
                <divide/>
                <ci> delta_S_cf </ci>
                <ci> R </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci> z_cf </ci>
                  <ci> F </ci>
                  <ci> V </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> R </ci>
                  <ci> T </ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>     
      </apply>
    </math>  
  </component>

  <connection>
    <map_components component_2="environment" component_1="sodium_current"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="Markov_model"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="rate_constants"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="sodium_current" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>

  <connection>
    <map_components component_2="rate_constants" component_1="membrane"/>
    <map_variables variable_2="V" variable_1="V"/>
  </connection>
  
  <connection>
    <map_components component_2="Markov_model" component_1="sodium_current"/>
    <map_variables variable_2="P_open" variable_1="P_open"/>
  </connection>
  
  <connection>
    <map_components component_2="rate_constants" component_1="Markov_model"/>
    <map_variables variable_2="alpha" variable_1="alpha"/>
    <map_variables variable_2="beta" variable_1="beta"/>
    <map_variables variable_2="cf" variable_1="cf"/>
    <map_variables variable_2="cn" variable_1="cn"/>
    <map_variables variable_2="of" variable_1="of"/>
    <map_variables variable_2="on" variable_1="on"/>
    <map_variables variable_2="eta" variable_1="eta"/>
    <map_variables variable_2="gamma" variable_1="gamma"/>
    <map_variables variable_2="delta" variable_1="delta"/>
    <map_variables variable_2="epsilon" variable_1="epsilon"/>
    <map_variables variable_2="omega" variable_1="omega"/>
    <map_variables variable_2="v" variable_1="v"/>
    <map_variables variable_2="gamma_gamma" variable_1="gamma_gamma"/>
    <map_variables variable_2="delta_delta" variable_1="delta_delta"/>
  </connection>
  

<rdf:RDF>
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  <rdf:Description rdf:about="rdf:#74144410-8599-4442-bec6-8a4344330ba9">
    <bqs:Pubmed_id>10096885</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#708f0f7b-3396-4785-ac81-4a48fce5f339"/>
  </rdf:Description>
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  <rdf:Description rdf:about="rdf:#3276ded3-cc81-451f-8169-6943c176525c">
    <dc:creator rdf:resource="rdf:#78eefed5-0536-4729-9835-d4d402961cb9"/>
    <rdf:value>This is a CellML description of Lisa Irvine et al.'s 1999 Markov model of the cardiac sodium channel.</rdf:value>
  </rdf:Description>
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  <rdf:Description rdf:about="#irvine_model_1999">
    <ns7:simulation rdf:resource="rdf:#$HPK2D2"/>
    <dc:title>Lisa Irvine et al.'s 1999 Markov model of the cardiac sodium channel.</dc:title>
    <cmeta:comment rdf:resource="rdf:#3276ded3-cc81-451f-8169-6943c176525c"/>
    <bqs:reference rdf:resource="rdf:#74144410-8599-4442-bec6-8a4344330ba9"/>
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  </rdf:Description>
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</rdf:RDF>
</model>