// This CellML file was generated on 20/08/2019 at 12:42:33 using:
//
// COR (0.9.31.1409)
// Copyright 2002-2019 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// reference: subject_type keyword; electrophysiology
def model MyModel1 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt_per_millimole as
    unit volt {pref: milli};
    unit millimolar {expo: -1};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_millimolar as
    unit millisecond;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit micrometre_3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit per_micrometre_3 as
    unit metre {expo: -3, pref: micro};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit centimeter as
    unit metre {pref: centi};
  enddef;
  def unit centimeter_squared as
    unit centimeter {expo: 2};
  enddef;
  def unit microliter_per_centimeter_cubed as
    unit microliter;
    unit centimeter {expo: -3};
  enddef;
  def unit microF_per_centimeter_squared as
    unit microF;
    unit centimeter_squared {expo: -1};
  enddef;
  def unit microliter as
    unit liter {pref: micro};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp extracellular as
    var nao: millimolar {init: 140, pub: out};
    var cao: millimolar {init: 1.8, pub: out};
    var ko: millimolar {init: 5.4, pub: out};
  enddef;

  def comp physical_constants as
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var zna: dimensionless {init: 1, pub: out};
    var zca: dimensionless {init: 2, pub: out};
    var zk: dimensionless {init: 1, pub: out};
  enddef;

  def comp cell_geometry as
    var L: centimeter {init: 0.0164};
    var rad: centimeter {init: 0.00175};
    var greekpi: dimensionless {init: 3.14159265};
    var vcell: microliter {pub: out};
    var Ageo: centimeter_squared {pub: out};
    var Acap: centimeter_squared {pub: out};
    var vmyo: microliter {pub: out};
    var vnsr: microliter {pub: out};
    var vjsr: microliter {pub: out};
    var vcsr: microliter {pub: out};
    var vsl: microliter {pub: out};
    var vss: microliter {pub: out};
    vcell = 1000{microliter_per_centimeter_cubed}*3.14159265{dimensionless}*rad*rad*L;
    Ageo = 2{dimensionless}*greekpi*rad*rad+2{dimensionless}*greekpi*rad*L;
    Acap = 2{dimensionless}*Ageo;
    vmyo = 0.6{dimensionless}*vcell;
    vnsr = 0.04{dimensionless}*vcell;
    vjsr = 0.002{dimensionless}*vcell;
    vcsr = 0.008{dimensionless}*vcell;
    vss = 0.02{dimensionless}*vcell;
    vsl = 0.15{dimensionless}*vcell;
  enddef;

  def comp membrane as
    var v: millivolt {init: -86.6814002878592, pub: out};
    var time: millisecond {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var vffrt: coulomb_per_mole {pub: out};
    var vfrt: dimensionless {pub: out};
    var INa: microA_per_microF {pub: in};
    var INaL: microA_per_microF {pub: in};
    var Ito: microA_per_microF {pub: in};
    var Isus: microA_per_microF {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var ICaT: microA_per_microF {pub: in};
    var ICaNa: microA_per_microF {pub: in};
    var ICaK: microA_per_microF {pub: in};
    var IKr: microA_per_microF {pub: in};
    var IKs: microA_per_microF {pub: in};
    var If: microA_per_microF {pub: in};
    var IK1: microA_per_microF {pub: in};
    var INaCa_i: microA_per_microF {pub: in};
    var INaCa_ss: microA_per_microF {pub: in};
    var INaK: microA_per_microF {pub: in};
    var INab: microA_per_microF {pub: in};
    var IpCa: microA_per_microF {pub: in};
    var ICab: microA_per_microF {pub: in};
    var Istim: microA_per_microF {pub: out};
    var amp: microA_per_microF {init: -40};
    var duration: millisecond {init: 1};
    Istim = sel
      case time <= duration:
        amp;
      otherwise:
        0{microA_per_microF};
    endsel;
    vffrt = v*F*F/(R*T);
    vfrt = v*F/(R*T);
    ode(v, time) = -(INa+INaL+Ito+Isus+ICaL+ICaT+ICaNa+ICaK+IKr+IKs+If+IK1+INaCa_i+INaCa_ss+INaK+INab+IpCa+ICab+Istim);
  enddef;

  def comp CaMK as
    var KmCaMK: millimolar {init: 0.15, pub: out};
    var aCaMK: per_millimolar_per_millisecond {init: 0.05};
    var bCaMK: per_millisecond {init: 0.00068};
    var CaMKo: dimensionless {init: 0.05};
    var KmCaM: millimolar {init: 0.0015};
    var CaMKb: millimolar {pub: out};
    var CaMKa: millimolar {pub: out};
    var CaMKt: millimolar {init: 0.00505983330678751};
    var cass: millimolar {pub: in};
    var time: millisecond {pub: in};
    CaMKb = CaMKo*(1{millimolar}-CaMKt)/(1{dimensionless}+KmCaM/cass);
    CaMKa = CaMKb+CaMKt;
    ode(CaMKt, time) = aCaMK*CaMKb*(CaMKb+CaMKt)-bCaMK*CaMKt;
  enddef;

  def comp intracellular_ions as
    var BSRmax: millimolar {init: 0.019975};
    var KmBSR: millimolar {init: 0.00087};
    var BSLmax: millimolar {init: 0.4777};
    var KmBSL: millimolar {init: 0.0087};
    var csqnmax: millimolar {init: 2.88};
    var kmcsqn: millimolar {init: 0.8};
    var csqnmaxsl: millimolar {init: 1.2};
    var cmdnmax: millimolar {init: 0.1125};
    var kmcmdn: millimolar {init: 0.00238};
    var cmdnmaxsl: millimolar {init: 0.0125};
    var trpnmax: millimolar {init: 0.0315};
    var kmtrpn: millimolar {init: 0.0005};
    var trpnmaxsl: millimolar {init: 0.0035};
    var nai: millimolar {init: 8.23183964616932, pub: out};
    var nasl: millimolar {init: 8.23153516580562, pub: out};
    var nass: millimolar {init: 8.23154325237268, pub: out};
    var ki: millimolar {init: 143.767359809132, pub: out};
    var kss: millimolar {init: 143.767768218104, pub: out};
    var ksl: millimolar {init: 143.767769906216, pub: out};
    var cai: millimolar {init: 4.36004404734282e-5, pub: out};
    var cass: millimolar {init: 0.000101777993438818, pub: out};
    var casl: millimolar {init: 0.000102004317781147, pub: out};
    var cansr: millimolar {init: 1.26350902016858, pub: out};
    var cajsr: millimolar {init: 1.24811940209535, pub: out};
    var cacsr: millimolar {init: 1.26516959198518, pub: out};
    var Acap: centimeter_squared {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var INa: microA_per_microF {pub: in};
    var INaL: microA_per_microF {pub: in};
    var INaCa_i: microA_per_microF {pub: in};
    var INaCa_ss: microA_per_microF {pub: in};
    var ICaNa: microA_per_microF {pub: in};
    var INaK: microA_per_microF {pub: in};
    var INab: microA_per_microF {pub: in};
    var IfNa: microA_per_microF {pub: in};
    var IfK: microA_per_microF {pub: in};
    var IK1: microA_per_microF {pub: in};
    var IKr: microA_per_microF {pub: in};
    var IKs: microA_per_microF {pub: in};
    var Istim: microA_per_microF {pub: in};
    var Ito: microA_per_microF {pub: in};
    var Isus: microA_per_microF {pub: in};
    var ICab: microA_per_microF {pub: in};
    var IpCa: microA_per_microF {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var ICaT: microA_per_microF {pub: in};
    var JdiffNa: millimolar_per_millisecond {pub: in};
    var JgapNa: millimolar_per_millisecond {pub: in};
    var Jdiff: millimolar_per_millisecond {pub: in};
    var Jgap: millimolar_per_millisecond {pub: in};
    var JdiffK: millimolar_per_millisecond {pub: in};
    var JgapK: millimolar_per_millisecond {pub: in};
    var Jup1: millimolar_per_millisecond {pub: in};
    var Jup2: millimolar_per_millisecond {pub: in};
    var Jrel1: millimolar_per_millisecond {pub: in};
    var Jrel2: millimolar_per_millisecond {pub: in};
    var Jip3: millimolar_per_millisecond {pub: in};
    var Jtr1: millimolar_per_millisecond {pub: in};
    var Jtr2: millimolar_per_millisecond {pub: in};
    var ICaK: microA_per_microF {pub: in};
    var time: millisecond {pub: in};
    var vmyo: microliter {pub: in};
    var vsl: microliter {pub: in};
    var vss: microliter {pub: in};
    var vnsr: microliter {pub: in};
    var vjsr: microliter {pub: in};
    var vcsr: microliter {pub: in};
    var Bcai: dimensionless;
    var Bcajsr: dimensionless;
    var Bcacsr: dimensionless;
    var Bcass: dimensionless;
    var Bcasl: dimensionless;
    var cm: microF_per_centimeter_squared {init: 1, pub: out};
    ode(nai, time) = JgapNa*vsl/vmyo;
    ode(nasl, time) = -(INa+INaL+3{dimensionless}*INaCa_i+3{dimensionless}*INaK+IfNa+INab)*Acap*cm/(F*vsl)+JdiffNa*vss/vsl+(-JgapNa);
    ode(nass, time) = -(ICaNa+3{dimensionless}*INaCa_ss)*cm*Acap/(F*vss)-JdiffNa;
    ode(ki, time) = JgapK*vsl/vmyo;
    ode(ksl, time) = -(Ito+Isus+IKr+IKs+IfK+IK1+Istim-2{dimensionless}*INaK)*cm*Acap/(F*vsl)+JdiffK*vss/vsl+(-JgapK);
    ode(kss, time) = -ICaK*cm*Acap/(F*vss)-JdiffK;
    Bcai = 1{dimensionless}/(1{dimensionless}+cmdnmax*kmcmdn/sqr(kmcmdn+cai)+trpnmax*kmtrpn/sqr(kmtrpn+cai));
    ode(cai, time) = Bcai*(Jgap*vsl/vmyo+Jrel2*vcsr/vmyo-Jup2*vnsr/vmyo);
    Bcass = 1{dimensionless}/(1{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+cass)+BSLmax*KmBSL/sqr(KmBSL+cass));
    ode(cass, time) = Bcass*(-(ICaL-2{dimensionless}*INaCa_ss)*cm*Acap/(2{dimensionless}*F*vss)+(Jrel1+Jip3)*vjsr/vss-Jdiff);
    Bcasl = 1{dimensionless}/(1{dimensionless}+cmdnmaxsl*kmcmdn/sqr(kmcmdn+casl)+trpnmaxsl*kmtrpn/sqr(kmtrpn+casl));
    ode(casl, time) = Bcasl*(-(IpCa+ICab+ICaT-2{dimensionless}*INaCa_i)*cm*Acap/(2{dimensionless}*F*vsl)-Jup1*vnsr/vsl+(-Jgap)+Jdiff*vss/vsl);
    ode(cansr, time) = Jup1+Jup2-(Jtr1*vjsr/vnsr+Jtr2*vcsr/vnsr);
    Bcajsr = 1{dimensionless}/(1{dimensionless}+csqnmaxsl*kmcsqn/sqr(kmcsqn+cajsr));
    ode(cajsr, time) = Bcajsr*(Jtr1-(Jrel1+Jip3));
    Bcacsr = 1{dimensionless}/(1{dimensionless}+csqnmax*kmcsqn/sqr(kmcsqn+cacsr));
    ode(cacsr, time) = Bcacsr*(Jtr2-Jrel2);
  enddef;

  def comp reversal_potentials as
    var PKNa: dimensionless {init: 0.01833};
    var ENa: millivolt {pub: out};
    var EK: millivolt {pub: out};
    var ECa: millivolt {pub: out};
    var EKs: millivolt {pub: out};
    var nao: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var nasl: millimolar {pub: in};
    var ksl: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    ENa = R*T/F*ln(nao/nasl);
    EK = R*T/F*ln(ko/ksl);
    ECa = R*T/(2{dimensionless}*F)*ln(cao/casl);
    EKs = R*T/F*ln((ko+PKNa*nao)/(ksl+PKNa*nasl));
  enddef;

  def comp INa as
    var mss: dimensionless;
    var tm: millisecond {pub: out};
    var mssV1: millivolt {init: 48.4264};
    var mssV2: millivolt {init: 7.5653};
    var mtV1: millivolt {init: 11.64};
    var mtV2: millivolt {init: 34.77};
    var mtD1: dimensionless {init: 6.765};
    var mtD2: dimensionless {init: 8.552};
    var mtV3: millivolt {init: 77.42};
    var mtV4: millivolt {init: 5.955};
    var m: dimensionless {init: 0.00632661703915808};
    var time: millisecond {pub: in};
    var hss: dimensionless;
    var thf: millisecond;
    var ths: millisecond;
    var hssV1: millivolt {init: 78.5};
    var hssV2: millivolt {init: 6.22};
    var Ahs: dimensionless;
    var Ahf: dimensionless {init: 0.99};
    var hf: dimensionless {init: 0.788611739889677};
    var hs: dimensionless {init: 0.788545979951331};
    var h: dimensionless;
    var GNa: milliS_per_microF {init: 39.4572};
    var jss: dimensionless;
    var tj: millisecond;
    var j: dimensionless {init: 0.790474358603666};
    var hssp: dimensionless;
    var thsp: millisecond;
    var hsp: dimensionless {init: 0.579693514309867};
    var hp: dimensionless;
    var tjp: millisecond;
    var jp: dimensionless {init: 0.790947058236417};
    var fINap: dimensionless;
    var INa: microA_per_microF {pub: out};
    var v: millivolt {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    mss = 1{dimensionless}/(1{dimensionless}+exp(-(v+mssV1)/mssV2));
    tm = 1{millisecond}/(mtD1*exp((v+mtV1)/mtV2)+mtD2*exp(-(v+mtV3)/mtV4));
    ode(m, time) = (mss-m)/tm;
    hss = 1{dimensionless}/(1{dimensionless}+exp((v+hssV1)/hssV2));
    thf = 1{millisecond}/(3.686e-6{dimensionless}*exp(-(v+3.8875{millivolt})/7.8579{millivolt})+16{dimensionless}*exp((v-0.4963{millivolt})/9.1843{millivolt}));
    ths = 1{millisecond}/(0.009794{dimensionless}*exp(-(v+17.95{millivolt})/28.05{millivolt})+0.3343{dimensionless}*exp((v+5.73{millivolt})/56.66{millivolt}));
    Ahs = 1{dimensionless}-Ahf;
    ode(hf, time) = (hss-hf)/thf;
    ode(hs, time) = (hss-hs)/ths;
    h = Ahf*hf+Ahs*hs;
    jss = hss;
    tj = 4.859{millisecond}+1{millisecond}/(0.8628{dimensionless}*exp(-(v+116.7258{millivolt})/7.6005{millivolt})+1.1096{dimensionless}*exp((v+6.2719{millivolt})/9.0358{millivolt}));
    ode(j, time) = (jss-j)/tj;
    hssp = 1{dimensionless}/(1{dimensionless}+exp((v+84.7{millivolt})/6.22{millivolt}));
    thsp = 3{dimensionless}*ths;
    ode(hsp, time) = (hssp-hsp)/thsp;
    hp = Ahf*hf+Ahs*hsp;
    tjp = 1.46{dimensionless}*tj;
    ode(jp, time) = (jss-jp)/tjp;
    fINap = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INa = GNa*(v-ENa)*pow(m, 3{dimensionless})*((1{dimensionless}-fINap)*h*j+fINap*hp*jp);
  enddef;

  def comp INaL as
    var mLss: dimensionless;
    var tm: millisecond {pub: in};
    var tmL: millisecond;
    var mL: dimensionless {init: 0.000241925773627233};
    var thL: millisecond {init: 200};
    var hLss: dimensionless;
    var v: millivolt {pub: in};
    var hL: dimensionless {init: 0.463574582508218};
    var hLssp: dimensionless;
    var thLp: millisecond;
    var hLp: dimensionless {init: 0.240216198686475};
    var GNaL: milliS_per_microF {init: 0.0189};
    var fINaLp: dimensionless;
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    var INaL: microA_per_microF {pub: out};
    var time: millisecond {pub: in};
    mLss = 1{dimensionless}/(1{dimensionless}+exp(-(v+42.85{millivolt})/5.264{millivolt}));
    tmL = tm;
    ode(mL, time) = (mLss-mL)/tmL;
    hLss = 1{dimensionless}/(1{dimensionless}+exp((v+87.61{millivolt})/7.488{millivolt}));
    ode(hL, time) = (hLss-hL)/thL;
    hLssp = 1{dimensionless}/(1{dimensionless}+exp((v+93.81{millivolt})/7.488{millivolt}));
    thLp = 3{dimensionless}*thL;
    ode(hLp, time) = (hLssp-hLp)/thLp;
    fINaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INaL = GNaL*(v-ENa)*mL*((1{dimensionless}-fINaLp)*hL+fINaLp*hLp);
  enddef;

  def comp Ito as
    var time: millisecond {pub: in};
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var ass: dimensionless;
    var taua: millisecond;
    var iss: dimensionless;
    var tauis: millisecond;
    var tauif: millisecond;
    var a: dimensionless {init: 0.000272851144435704};
    var i1: dimensionless {init: 0.649604795721571};
    var i2: dimensionless {init: 0.989965695822495};
    var Gto: milliS_per_microF {init: 0.192};
    var Ito: microA_per_microF {pub: out};
    ass = 1{dimensionless}/(1{dimensionless}+exp((20{millivolt}-v)/13{millivolt}));
    iss = 1{dimensionless}/(1{dimensionless}+exp((27{millivolt}+v)/13{millivolt}));
    taua = 1.0515{millisecond}/(1{dimensionless}/(1.2089{dimensionless}*(1{dimensionless}+exp(-(v-18.4099{millivolt})/29.3814{millivolt})))+3.5{dimensionless}/(1{dimensionless}+exp((v+100{millivolt})/29.3814{millivolt})));
    tauis = 43{millisecond}+1{dimensionless}/(0.001416{dimensionless}*exp(-(v+96.52{dimensionless})/59.05{dimensionless})+0.0000000178{dimensionless}*exp((v+114.1{dimensionless})/8.079{dimensionless}));
    tauif = 6.162{millisecond}+1{dimensionless}/(0.3933{dimensionless}*exp(-(v+100{dimensionless})/100{dimensionless})+0.08004{dimensionless}*exp((v-8{dimensionless})/8.59{dimensionless}));
    ode(a, time) = (ass-a)/taua;
    ode(i1, time) = (iss-i1)/tauis;
    ode(i2, time) = (iss-i2)/tauif;
    Ito = Gto*a*i1*i2*(v-EK);
  enddef;

  def comp Isus as
    var Gsus: milliS_per_microF {init: 0.0301};
    var asus: dimensionless;
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var Isus: microA_per_microF {pub: out};
    asus = 1{dimensionless}/(1{dimensionless}+exp(-(v-12{millivolt})/16{millivolt}));
    Isus = Gsus*asus*(v-EK);
  enddef;

  def comp ICaL as
    var Kmn: millimolar {init: 0.002};
    var k2n: per_millisecond {init: 1000};
    var dss: dimensionless;
    var d: dimensionless {init: 6.97735089296892e-9};
    var fss: dimensionless;
    var Aff: dimensionless;
    var Afs: dimensionless;
    var ff: dimensionless {init: 0.999999968230738};
    var fs: dimensionless {init: 0.926692153319136};
    var f: dimensionless;
    var fcass: dimensionless;
    var Afcaf: dimensionless;
    var Afcas: dimensionless;
    var fcaf: dimensionless {init: 0.99999996819573};
    var fcas: dimensionless {init: 0.999999905741936};
    var fca: dimensionless;
    var jca: dimensionless {init: 0.999978907334662};
    var ffp: dimensionless {init: 0.999999968365903};
    var fp: dimensionless;
    var fcafp: dimensionless {init: 0.999999968278239};
    var fcap: dimensionless;
    var km2n: per_millisecond;
    var anca: dimensionless;
    var nca: dimensionless {init: 0.00547252500964926};
    var PhiCaL: dimensionless;
    var PhiCaNa: dimensionless;
    var PhiCaK: dimensionless;
    var PCa: dimensionless {init: 7.7677e-5};
    var PCap: dimensionless;
    var PCaNa: dimensionless;
    var PCaK: dimensionless;
    var PCaNap: dimensionless;
    var PCaKp: dimensionless;
    var fICaLp: dimensionless;
    var td: millisecond;
    var tff: millisecond;
    var tfs: millisecond;
    var tfcaf: millisecond;
    var tfcas: millisecond;
    var tjca: millisecond;
    var tffp: millisecond;
    var tfcafp: millisecond;
    var ICaL: microA_per_microF {pub: out};
    var ICaNa: microA_per_microF {pub: out};
    var ICaK: microA_per_microF {pub: out};
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var cass: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    var nao: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    dss = 1{dimensionless}/(1{dimensionless}+exp(-(v+3.94{millivolt}+3.3{millivolt})/4.23{millivolt}));
    td = 0.6{millisecond}+1{millisecond}/(exp(-0.05{per_millivolt}*(v+6{millivolt}))+exp(0.09{per_millivolt}*(v+14{millivolt})));
    ode(d, time) = (dss-d)/td;
    fss = 1{dimensionless}/(1{dimensionless}+exp((v+19.58{millivolt}+3.3{millivolt})/3.696{millivolt}));
    tff = 7{millisecond}+1{millisecond}/(0.0045{dimensionless}*exp(-(v+20{millivolt}+15.19{millivolt})/10{millivolt})+0.0045{dimensionless}*exp((v+20{millivolt}+15.19{millivolt})/10{millivolt}));
    tfs = 1000{millisecond}+1{millisecond}/(0.000035{dimensionless}*exp(-(v+5{millivolt}+15.19{millivolt})/4{millivolt})+0.000035{dimensionless}*exp((v+5{millivolt}+15.19{millivolt})/6{millivolt}));
    Aff = 0.6{dimensionless};
    Afs = 1{dimensionless}-Aff;
    ode(ff, time) = (fss-ff)/tff;
    ode(fs, time) = (fss-fs)/tfs;
    f = Aff*ff+Afs*fs;
    fcass = fss;
    tfcaf = 0.72{dimensionless}*(7{millisecond}+1{millisecond}/(0.04{dimensionless}*exp(-(v+15.19{millivolt}-4{millivolt})/7{millivolt})+0.04{dimensionless}*exp((v+15.19{millivolt}-4{millivolt})/7{millivolt})));
    tfcas = 0.49{dimensionless}*(100{millisecond}+1{millisecond}/(0.00012{dimensionless}*exp(-(v+15.19{millivolt})/3{millivolt})+0.00012{dimensionless}*exp((v+15.19{millivolt})/7{millivolt})));
    Afcaf = 0.3{dimensionless}+0.6{dimensionless}/(1{dimensionless}+exp((v-10{millivolt})/10{millivolt}));
    Afcas = 1{dimensionless}-Afcaf;
    ode(fcaf, time) = (fcass-fcaf)/tfcaf;
    ode(fcas, time) = (fcass-fcas)/tfcas;
    fca = Afcaf*fcaf+Afcas*fcas;
    tjca = 75{millisecond};
    ode(jca, time) = (fcass-jca)/tjca;
    tffp = 2.5{dimensionless}*tff;
    ode(ffp, time) = (fss-ffp)/tffp;
    fp = Aff*ffp+Afs*fs;
    tfcafp = 2.5{dimensionless}*tfcaf;
    ode(fcafp, time) = (fcass-fcafp)/tfcafp;
    fcap = Afcaf*fcafp+Afcas*fcas;
    km2n = jca*1{per_millisecond};
    anca = 1{dimensionless}/(k2n/km2n+pow(1{dimensionless}+Kmn/cass, 4{dimensionless}));
    ode(nca, time) = anca*k2n-nca*km2n;
    PhiCaL = 4{per_millivolt}*vffrt*(cass*exp(2{dimensionless}*vfrt)-0.341{per_millimolar}*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
    PhiCaNa = 1{dimensionless}*vffrt*(0.75{dimensionless}*nass*exp(1{dimensionless}*vfrt)-0.75{dimensionless}*nao)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PhiCaK = 1{dimensionless}*vffrt*(0.75{dimensionless}*kss*exp(1{dimensionless}*vfrt)-0.75{dimensionless}*ko)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PCap = 1.1{dimensionless}*PCa;
    PCaNa = 0.00125{dimensionless}*PCa;
    PCaK = 3.574e-4{dimensionless}*PCa;
    PCaNap = 0.00125{dimensionless}*PCap;
    PCaKp = 3.574e-4{dimensionless}*PCap;
    fICaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    ICaL = (1{dimensionless}-fICaLp)*PCa*PhiCaL*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCap*PhiCaL*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
    ICaNa = (1{dimensionless}-fICaLp)*PCaNa*PhiCaNa*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCaNap*PhiCaNa*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
    ICaK = (1{dimensionless}-fICaLp)*PCaK*PhiCaK*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCaKp*PhiCaK*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
  enddef;

  def comp ICaT as
    var GCaT: milliS_per_microF {init: 0.0754};
    var bss: dimensionless;
    var gss: dimensionless;
    var taub: millisecond;
    var taug: millisecond;
    var b: dimensionless {init: 0.000304250912559619};
    var g: dimensionless {init: 0.994214357917907};
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var ECa: millivolt {pub: in};
    var ICaT: microA_per_microF {pub: out};
    bss = 1{dimensionless}/(1{dimensionless}+exp(-(v+30{millivolt})/7{millivolt}));
    gss = 1{dimensionless}/(1{dimensionless}+exp((v+61{millivolt})/5{millivolt}));
    taub = 1{millisecond}/(1.068{dimensionless}*exp((v+16.3{millivolt})/30{millivolt})+1.068{dimensionless}*exp(-(v+16.3{millivolt})/30{millivolt}));
    taug = 1{millisecond}/(0.015{dimensionless}*exp((v+71.7{millivolt})/15.4{millivolt})+0.015{dimensionless}*exp(-(v+71.7{millivolt})/83.3{millivolt}));
    ode(b, time) = (bss-b)/taub;
    ode(g, time) = (gss-g)/taug;
    ICaT = GCaT*b*g*(v-ECa);
  enddef;

  def comp IKr as
    var GKr: milliS_per_microF {init: 0.0342};
    var xrss: dimensionless;
    var txrf: millisecond;
    var txrs: millisecond;
    var Axrf: dimensionless;
    var Axrs: dimensionless;
    var xrf: dimensionless {init: 0.000331691184084272};
    var xrs: dimensionless {init: 0.568716473334161};
    var xr: dimensionless;
    var rkr: dimensionless;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    var IKr: microA_per_microF {pub: out};
    xrss = 1{dimensionless}/(1{dimensionless}+exp(-(v+8.337{millivolt})/6.789{millivolt}));
    txrf = 12.98{millisecond}+1{millisecond}/(0.3652{dimensionless}*exp((v+17.6{millivolt}-31.66{millivolt})/3.869{millivolt})+4.123e-5{dimensionless}*exp(-(v+17.6{millivolt}-47.78{millivolt})/20.38{millivolt}));
    txrs = 1.865{millisecond}+1{millisecond}/(0.06629{dimensionless}*exp((v+17.2{millivolt}-34.7{millivolt})/7.355{millivolt})+1.128e-5{dimensionless}*exp(-(v+17.2{millivolt}-29.74{millivolt})/25.94{millivolt}));
    Axrf = 1{dimensionless}/(1{dimensionless}+exp((v+54.81{millivolt})/38.21{millivolt}));
    Axrs = 1{dimensionless}-Axrf;
    ode(xrf, time) = (xrss-xrf)/txrf;
    ode(xrs, time) = (xrss-xrs)/txrs;
    xr = Axrf*xrf+Axrs*xrs;
    rkr = 1{dimensionless}/(1{dimensionless}+exp((v+55{millivolt})/(0.32{millivolt}*75{millivolt})))*1{dimensionless}/(1{dimensionless}+exp((v-10{millivolt})/(0.32{millivolt}*30{millivolt})));
    IKr = GKr*sqrt(ko/5.4{dimensionless})*xr*rkr*(v-EK);
  enddef;

  def comp IKs as
    var GKs: milliS_per_microF {init: 0.0029};
    var xs1ss: dimensionless;
    var xs2ss: dimensionless;
    var txs1: millisecond;
    var xs1: dimensionless {init: 0.191165248085394};
    var xs2: dimensionless {init: 0.000222677365291219};
    var KsCa: dimensionless;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var EKs: millivolt {pub: in};
    var IKs: microA_per_microF {pub: out};
    var txs2: millisecond;
    var casl: millimolar {pub: in};
    xs1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+11.6{millivolt})/8.932{millivolt}));
    txs1 = 817.3{millisecond}+1{millisecond}/(2.326e-4{dimensionless}*exp((v+48.28{millivolt})/17.8{millivolt})+0.001292{dimensionless}*exp(-(v+210{millivolt})/230{millivolt}));
    ode(xs1, time) = (xs1ss-xs1)/txs1;
    xs2ss = xs1ss;
    txs2 = 1{millisecond}/(0.01{dimensionless}*exp((v-50{millivolt})/20{millivolt})+0.0193{dimensionless}*exp(-(v+66.54{millivolt})/31{millivolt}));
    ode(xs2, time) = (xs2ss-xs2)/txs2;
    KsCa = 1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/casl, 1.4{dimensionless}));
    IKs = GKs*KsCa*xs1*xs2*(v-EKs);
  enddef;

  def comp If as
    var GfNa: milliS_per_microF {init: 0.0116};
    var GfK: milliS_per_microF {init: 0.0232};
    var yss: dimensionless;
    var tauy: millisecond;
    var y: dimensionless {init: 0.233119011214908};
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var ENa: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var IfNa: microA_per_microF {pub: out};
    var IfK: microA_per_microF {pub: out};
    var If: microA_per_microF {pub: out};
    yss = 1{dimensionless}/(1{dimensionless}+exp((v+87{millivolt})/9.5{millivolt}));
    tauy = 2000{millisecond}/(exp((v+57{millivolt})/60{millivolt})+exp(-(v+132{millivolt})/10{millivolt}));
    ode(y, time) = (yss-y)/tauy;
    IfNa = GfNa*y*y*(v-ENa);
    IfK = GfK*y*y*(v-EK);
    If = IfNa+IfK;
  enddef;

  def comp IK1 as
    var GK1: milliS_per_microF {init: 0.0455};
    var xk1ss: dimensionless;
    var txk1: millisecond;
    var xk1: dimensionless {init: 0.997084813729909};
    var rk1: millisecond;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    var IK1: microA_per_microF {pub: out};
    xk1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+2.5538{millivolt_per_millimole}*ko+144.59{millivolt})/(1.5692{millivolt_per_millimole}*ko+3.8115{millivolt})));
    txk1 = 122.2{millisecond}/(exp(-(v+127.2{millivolt})/20.36{millivolt})+exp((v+236.8{millivolt})/69.33{millivolt}));
    ode(xk1, time) = (xk1ss-xk1)/txk1;
    rk1 = 1{dimensionless}/(1{dimensionless}+exp((v+116{millivolt}-5.5{millivolt_per_millimole}*ko)/11{millivolt}));
    IK1 = GK1*2.3238{dimensionless}*sqrt(ko/5.4{dimensionless})*rk1*xk1*(v-EK);
  enddef;

  def comp INaCa_i as
    var kna1: per_millisecond {init: 15};
    var kna2: per_millisecond {init: 5};
    var kna3: per_millisecond {init: 88.12};
    var kasymm: dimensionless {init: 12.5};
    var wna: dimensionless {init: 60000};
    var wca: dimensionless {init: 60000};
    var wnaca: dimensionless {init: 5000};
    var kcaon: per_millisecond {init: 1500000};
    var kcaoff: per_millisecond {init: 5000};
    var qna: dimensionless {init: 0.5224};
    var qca: dimensionless {init: 0.167};
    var hna: dimensionless;
    var hca: dimensionless;
    var zca: dimensionless {pub: in};
    var KmCaAct: millimolar {init: 0.00015};
    var zna: dimensionless {pub: in};
    var Gncx: milliS_per_microF {init: 0.00095709};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var v: millivolt {pub: in};
    var nass: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var nasl: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var h1_i: dimensionless;
    var h2_i: dimensionless;
    var h3_i: dimensionless;
    var h4_i: dimensionless;
    var h5_i: dimensionless;
    var h6_i: dimensionless;
    var h7_i: dimensionless;
    var h8_i: dimensionless;
    var h9_i: dimensionless;
    var h10_i: dimensionless;
    var h11_i: dimensionless;
    var h12_i: dimensionless;
    var k1_i: dimensionless;
    var k2_i: dimensionless;
    var k3p_i: dimensionless;
    var k3pp_i: dimensionless;
    var k3_i: dimensionless;
    var k4_i: dimensionless;
    var k4p_i: dimensionless;
    var k4pp_i: dimensionless;
    var k5_i: dimensionless;
    var k6_i: dimensionless;
    var k7_i: dimensionless;
    var k8_i: dimensionless;
    var x1_i: dimensionless;
    var x2_i: dimensionless;
    var x3_i: dimensionless;
    var x4_i: dimensionless;
    var E1_i: dimensionless;
    var E2_i: dimensionless;
    var E3_i: dimensionless;
    var E4_i: dimensionless;
    var allo_i: dimensionless;
    var JncxNa_i: millimolar_per_millisecond;
    var JncxCa_i: millimolar_per_millisecond;
    var INaCa_i: microA_per_microF {pub: out};
    var INaCa_ss: microA_per_microF {pub: out};
    var h1_ss: dimensionless;
    var h2_ss: dimensionless;
    var h3_ss: dimensionless;
    var h4_ss: dimensionless;
    var h5_ss: dimensionless;
    var h6_ss: dimensionless;
    var h7_ss: dimensionless;
    var h8_ss: dimensionless;
    var h9_ss: dimensionless;
    var h10_ss: dimensionless;
    var h11_ss: dimensionless;
    var h12_ss: dimensionless;
    var k1_ss: dimensionless;
    var k2_ss: dimensionless;
    var k3p_ss: dimensionless;
    var k3pp_ss: dimensionless;
    var k3_ss: dimensionless;
    var k4_ss: dimensionless;
    var k4p_ss: dimensionless;
    var k4pp_ss: dimensionless;
    var k5_ss: dimensionless;
    var k6_ss: dimensionless;
    var k7_ss: dimensionless;
    var k8_ss: dimensionless;
    var x1_ss: dimensionless;
    var x2_ss: dimensionless;
    var x3_ss: dimensionless;
    var x4_ss: dimensionless;
    var E1_ss: dimensionless;
    var E2_ss: dimensionless;
    var E3_ss: dimensionless;
    var E4_ss: dimensionless;
    var allo_ss: dimensionless;
    var JncxNa_ss: millimolar_per_millisecond;
    var JncxCa_ss: millimolar_per_millisecond;
    hca = exp(qca*v*F/(R*T));
    hna = exp(qna*v*F/(R*T));
    h1_i = 1{dimensionless}+nasl/kna3*(1{dimensionless}+hna);
    h2_i = nasl*hna/(kna3*h1_i);
    h3_i = 1{dimensionless}/h1_i;
    h4_i = 1{dimensionless}+nasl/kna1*(1{dimensionless}+nasl/kna2);
    h5_i = nasl*nasl/(h4_i*kna1*kna2);
    h6_i = 1{dimensionless}/h4_i;
    h7_i = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_i = nao/(kna3*hna*h7_i);
    h9_i = 1{dimensionless}/h7_i;
    h10_i = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_i = nao*nao/(h10_i*kna1*kna2);
    h12_i = 1{dimensionless}/h10_i;
    k1_i = h12_i*cao*kcaon;
    k2_i = kcaoff;
    k3p_i = h9_i*wca;
    k3pp_i = h8_i*wnaca;
    k3_i = k3p_i+k3pp_i;
    k4p_i = h3_i*wca/hca;
    k4pp_i = h2_i*wnaca;
    k4_i = k4p_i+k4pp_i;
    k5_i = kcaoff;
    k6_i = h6_i*casl*kcaon;
    k7_i = h5_i*h2_i*wna;
    k8_i = h8_i*h11_i*wna;
    x1_i = k2_i*k4_i*(k7_i+k6_i)+k5_i*k7_i*(k2_i+k3_i);
    x2_i = k1_i*k7_i*(k4_i+k5_i)+k4_i*k6_i*(k1_i+k8_i);
    x3_i = k1_i*k3_i*(k7_i+k6_i)+k8_i*k6_i*(k2_i+k3_i);
    x4_i = k2_i*k8_i*(k4_i+k5_i)+k3_i*k5_i*(k1_i+k8_i);
    E1_i = x1_i/(x1_i+x2_i+x3_i+x4_i);
    E2_i = x2_i/(x1_i+x2_i+x3_i+x4_i);
    E3_i = x3_i/(x1_i+x2_i+x3_i+x4_i);
    E4_i = x4_i/(x1_i+x2_i+x3_i+x4_i);
    allo_i = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/casl));
    JncxNa_i = 3{dimensionless}*(E4_i*k7_i-E1_i*k8_i)+E3_i*k4pp_i-E2_i*k3pp_i;
    JncxCa_i = E2_i*k2_i-E1_i*k1_i;
    INaCa_i = 0.8{dimensionless}*Gncx*allo_i*(zna*JncxNa_i+zca*JncxCa_i);
    h1_ss = 1{dimensionless}+nass/kna3*(1{dimensionless}+hna);
    h2_ss = nass*hna/(kna3*h1_ss);
    h3_ss = 1{dimensionless}/h1_ss;
    h4_ss = 1{dimensionless}+nass/kna1*(1{dimensionless}+nass/kna2);
    h5_ss = nass*nass/(h4_ss*kna1*kna2);
    h6_ss = 1{dimensionless}/h4_ss;
    h7_ss = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_ss = nao/(kna3*hna*h7_ss);
    h9_ss = 1{dimensionless}/h7_ss;
    h10_ss = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_ss = nao*nao/(h10_ss*kna1*kna2);
    h12_ss = 1{dimensionless}/h10_ss;
    k1_ss = h12_ss*cao*kcaon;
    k2_ss = kcaoff;
    k3p_ss = h9_ss*wca;
    k3pp_ss = h8_ss*wnaca;
    k3_ss = k3p_ss+k3pp_ss;
    k4p_ss = h3_ss*wca/hca;
    k4pp_ss = h2_ss*wnaca;
    k4_ss = k4p_ss+k4pp_ss;
    k5_ss = kcaoff;
    k6_ss = h6_ss*cass*kcaon;
    k7_ss = h5_ss*h2_ss*wna;
    k8_ss = h8_ss*h11_ss*wna;
    x1_ss = k2_ss*k4_ss*(k7_ss+k6_ss)+k5_ss*k7_ss*(k2_ss+k3_ss);
    x2_ss = k1_ss*k7_ss*(k4_ss+k5_ss)+k4_ss*k6_ss*(k1_ss+k8_ss);
    x3_ss = k1_ss*k3_ss*(k7_ss+k6_ss)+k8_ss*k6_ss*(k2_ss+k3_ss);
    x4_ss = k2_ss*k8_ss*(k4_ss+k5_ss)+k3_ss*k5_ss*(k1_ss+k8_ss);
    E1_ss = x1_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E2_ss = x2_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E3_ss = x3_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E4_ss = x4_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    allo_ss = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cass));
    JncxNa_ss = 3{dimensionless}*(E4_ss*k7_ss-E1_ss*k8_ss)+E3_ss*k4pp_ss-E2_ss*k3pp_ss;
    JncxCa_ss = E2_ss*k2_ss-E1_ss*k1_ss;
    INaCa_ss = 0.2{dimensionless}*Gncx*allo_ss*(zna*JncxNa_ss+zca*JncxCa_ss);
  enddef;

  def comp INaK as
    var k1p: per_millisecond {init: 949.5};
    var k1m: per_millisecond {init: 182.4};
    var k2p: per_millisecond {init: 687.2};
    var k2m: per_millisecond {init: 39.4};
    var k3p: per_millisecond {init: 1899};
    var k3m: per_millisecond {init: 79300};
    var k4p: per_millisecond {init: 639};
    var k4m: per_millisecond {init: 40};
    var Knai0: millimolar {init: 9.073};
    var Knao0: millimolar {init: 27.78};
    var delta: millivolt {init: -0.155};
    var Kki: per_millisecond {init: 0.5};
    var Kko: per_millisecond {init: 0.3582};
    var MgADP: millimolar {init: 0.05};
    var MgATP: millimolar {init: 9.8};
    var Kmgatp: millimolar {init: 1.698e-7};
    var H: millimolar {init: 1e-7};
    var eP: dimensionless {init: 4.2};
    var Khp: millimolar {init: 1.698e-7};
    var Knap: millimolar {init: 224};
    var Kxkur: millimolar {init: 292};
    var zk: dimensionless {pub: in};
    var zna: dimensionless {pub: in};
    var Pnak: milliS_per_microF {init: 32.4872};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var v: millivolt {pub: in};
    var nasl: millimolar {pub: in};
    var ksl: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var Knai: millimolar;
    var Knao: millimolar;
    var P: dimensionless;
    var a1: dimensionless;
    var b1: dimensionless;
    var a2: dimensionless;
    var b2: dimensionless;
    var a3: dimensionless;
    var b3: dimensionless;
    var a4: dimensionless;
    var b4: dimensionless;
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var E1: dimensionless;
    var E2: dimensionless;
    var E3: dimensionless;
    var E4: dimensionless;
    var JnakNa: millimolar_per_millisecond;
    var JnakK: millimolar_per_millisecond;
    var INaK: microA_per_microF {pub: out};
    Knai = Knai0*exp(delta*v*F/(3{dimensionless}*R*T));
    Knao = Knao0*exp((1{dimensionless}-delta)*v*F/(3{dimensionless}*R*T));
    P = eP/(1{dimensionless}+H/Khp+nasl/Knap+ksl/Kxkur);
    a1 = k1p*pow(nasl/Knai, 3{dimensionless})/(pow(1{dimensionless}+nasl/Knai, 3{dimensionless})+sqr(1{dimensionless}+ksl/Kki)-1{dimensionless});
    b1 = k1m*MgADP;
    a2 = k2p;
    b2 = k2m*pow(nao/Knao, 3{dimensionless})/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    a3 = k3p*sqr(ko/Kko)/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    b3 = k3m*P*H/(1{dimensionless}+MgATP/Kmgatp);
    a4 = k4p*MgATP/Kmgatp/(1{dimensionless}+MgATP/Kmgatp);
    b4 = k4m*sqr(ksl/Kki)/(pow(1{dimensionless}+nasl/Knai, 3{dimensionless})+sqr(1{dimensionless}+ksl/Kki)-1{dimensionless});
    x1 = a4*a1*a2+b2*b4*b3+a2*b4*b3+b3*a1*a2;
    x2 = b2*b1*b4+a1*a2*a3+a3*b1*b4+a2*a3*b4;
    x3 = a2*a3*a4+b3*b2*b1+b2*b1*a4+a3*a4*b1;
    x4 = b4*b3*b2+a3*a4*a1+b2*a4*a1+b3*b2*a1;
    E1 = x1/(x1+x2+x3+x4);
    E2 = x2/(x1+x2+x3+x4);
    E3 = x3/(x1+x2+x3+x4);
    E4 = x4/(x1+x2+x3+x4);
    JnakNa = 3{dimensionless}*(E1*a3-E2*b3);
    JnakK = 2{dimensionless}*(E4*b1-E3*a1);
    INaK = Pnak*(zna*JnakNa+zk*JnakK);
  enddef;

  def comp INab as
    var PNab: milliS_per_microF {init: 9.375e-10};
    var INab: microA_per_microF {pub: out};
    var nasl: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    INab = PNab*vffrt*(nasl*exp(vfrt)-nao)/(exp(vfrt)-1{dimensionless});
  enddef;

  def comp ICab as
    var PCab: milliS_per_microF {init: 2.5e-8};
    var ICab: microA_per_microF {pub: out};
    var casl: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    ICab = PCab*4{dimensionless}*vffrt*(casl*exp(2{dimensionless}*vfrt)-0.341{dimensionless}*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
  enddef;

  def comp IpCa as
    var GpCa: milliS_per_microF {init: 0.0005};
    var KmCap: millimolar {init: 0.0005};
    var IpCa: microA_per_microF {pub: out};
    var casl: millimolar {pub: in};
    IpCa = GpCa*casl/(KmCap+casl);
  enddef;

  def comp diff as
    var sstau: millisecond {init: 0.2};
    var gaptau: millisecond {init: 12};
    var cai: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var nasl: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var ksl: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var JdiffNa: millimolar_per_millisecond {pub: out};
    var JgapNa: millimolar_per_millisecond {pub: out};
    var Jdiff: millimolar_per_millisecond {pub: out};
    var Jgap: millimolar_per_millisecond {pub: out};
    var JdiffK: millimolar_per_millisecond {pub: out};
    var JgapK: millimolar_per_millisecond {pub: out};
    JdiffNa = (nass-nasl)/sstau;
    JgapNa = (nasl-nai)/gaptau;
    JdiffK = (kss-ksl)/sstau;
    JgapK = (ksl-ki)/gaptau;
    Jdiff = (cass-casl)/sstau;
    Jgap = (casl-cai)/gaptau;
  enddef;

  def comp ryr as
    var REL: millimolar_per_millisecond;
    var irelss: millimolar_per_millisecond;
    var ireltau: dimensionless;
    var REL2: millimolar_per_millisecond;
    var irelss2: millimolar_per_millisecond;
    var ireltau2: dimensionless;
    var F: coulomb_per_mole {pub: in};
    var Acap: centimeter_squared {pub: in};
    var vss: microliter {pub: in};
    var vsl: microliter {pub: in};
    var vcsr: microliter {pub: in};
    var vnsr: microliter {pub: in};
    var vjsr: microliter {pub: in};
    var vmyo: microliter {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var cajsr: millimolar {pub: in};
    var cacsr: millimolar {pub: in};
    var Jdiff: millimolar_per_millisecond {pub: in};
    var Jgap: millimolar_per_millisecond {pub: in};
    var Jip3: millimolar_per_millisecond {pub: in};
    var Jup2: millimolar_per_millisecond {pub: in};
    var time: millisecond {pub: in};
    var CaMKa: millimolar {pub: in};
    var Jrel1: millimolar_per_millisecond {init: 0.000108240945806962, pub: out};
    var Jrel2: millimolar_per_millisecond {init: 1.25045800437317e-69, pub: out};
    REL = -(ICaL*Acap/(vss*F*2{dimensionless})+(-(Jrel1+Jip3)*vjsr/vss)+Jdiff);
    ireltau = 2{dimensionless}*(1{dimensionless}+1{dimensionless}*1{dimensionless}/(1{dimensionless}+pow(0.28{dimensionless}/CaMKa, 8{dimensionless})))/(1{dimensionless}+0.0123{millimolar}/cajsr);
    irelss = sel
      case REL > 0{millimolar_per_millisecond}:
        15{dimensionless}*(1{dimensionless}+1{dimensionless}*1{dimensionless}/(1{dimensionless}+pow(0.28{dimensionless}/CaMKa, 8{dimensionless})))*REL/(1{dimensionless}+pow(1{dimensionless}/cajsr, 8{dimensionless}));
      otherwise:
        0{millimolar_per_millisecond};
    endsel;
    ode(Jrel1, time) = (irelss-Jrel1)/ireltau;
    REL2 = Jgap*vsl/vmyo+(-Jup2*vnsr/vmyo)+Jrel2*vcsr/vmyo;
    ireltau2 = 6{dimensionless}*(1{dimensionless}+1{dimensionless}*1{dimensionless}/(1{dimensionless}+pow(0.28{dimensionless}/CaMKa, 8{dimensionless})))/(1{dimensionless}+0.0123{dimensionless}/cacsr);
    irelss2 = sel
      case REL2 > 0{millimolar_per_millisecond}:
        91{dimensionless}*(1{dimensionless}+1{dimensionless}*1{dimensionless}/(1{dimensionless}+pow(0.28{dimensionless}/CaMKa, 8{dimensionless})))*REL2/(1{dimensionless}+pow(1{dimensionless}/cacsr, 8{dimensionless}));
      otherwise:
        0{millimolar_per_millisecond};
    endsel;
    ode(Jrel2, time) = (irelss2-Jrel2)/ireltau2;
  enddef;

  def comp SERCA as
    var dqupcamkbar: dimensionless {init: 0.75};
    var dkmplbbar: dimensionless {init: 0.00017};
    var kmup: dimensionless {init: 0.00028};
    var nsrbar: dimensionless {init: 15};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var cai: millimolar {pub: in};
    var casl: millimolar {pub: in};
    var cansr: millimolar {pub: in};
    var dkmplb: dimensionless;
    var dqupcamk: dimensionless;
    var Jup1: millimolar_per_millisecond {pub: out};
    var Jup2: millimolar_per_millisecond {pub: out};
    dkmplb = dkmplbbar*CaMKa/(CaMKa+KmCaMK);
    dqupcamk = dqupcamkbar*CaMKa/(CaMKa+KmCaMK);
    Jup1 = 0.0002{millimolar_per_millisecond}*(dqupcamk+1{millimolar_per_millisecond})/(1{millimolar_per_millisecond}+(kmup-dkmplb)/casl)-0.00105{millimolar_per_millisecond}*cansr/nsrbar;
    Jup2 = 0.0026{millimolar_per_millisecond}*(dqupcamk+1{millimolar_per_millisecond})/(1{millimolar_per_millisecond}+(kmup-dkmplb)/cai)-0.0042{millimolar_per_millisecond}*cansr/nsrbar;
  enddef;

  def comp IP3 as
    var IP3: dimensionless {init: 0.0001};
    var k1: dimensionless {init: 150000};
    var k1a: dimensionless {init: 16.5};
    var k0: dimensionless {init: 96000};
    var k0a: dimensionless {init: 9.6};
    var k2: dimensionless {init: 1800};
    var k2a: dimensionless {init: 0.21};
    var tauip3: millisecond {init: 3.7};
    var cass: millimolar {pub: in};
    var cajsr: millimolar {pub: in};
    var time: millisecond {pub: in};
    var POip3: dimensionless;
    var u: millimolar_per_millisecond {init: 0.466236137183558, pub: out};
    var Jip3: millimolar_per_millisecond {pub: out};
    ode(u, time) = cass*k2*(1{millimolar_per_millisecond}-u)-k2a*u;
    POip3 = tauip3*IP3*cass*(1{millimolar_per_millisecond}-u)/((1{millimolar_per_millisecond}+IP3*k0/k0a)*(1{millimolar_per_millisecond}+cass*k1/k1a));
    Jip3 = 10.92{millimolar_per_millisecond}*POip3*(cajsr-cass);
  enddef;

  def comp trans_flux as
    var cansr: millimolar {pub: in};
    var cajsr: millimolar {pub: in};
    var cacsr: millimolar {pub: in};
    var Jtr1: millimolar_per_millisecond {pub: out};
    var Jtr2: millimolar_per_millisecond {pub: out};
    Jtr1 = (cansr-cajsr)/120{millisecond};
    Jtr2 = (cansr-cacsr)/120{millisecond};
  enddef;
  def map between intracellular_ions and INaL for
    vars INaL and INaL;
  enddef;
  def map between intracellular_ions and membrane for
    vars Istim and Istim;
  enddef;
  def map between intracellular_ions and trans_flux for
    vars cajsr and cajsr;
    vars cansr and cansr;
    vars cacsr and cacsr;
    vars Jtr1 and Jtr1;
    vars Jtr2 and Jtr2;
  enddef;
  def map between intracellular_ions and SERCA for
    vars cai and cai;
    vars casl and casl;
    vars cansr and cansr;
    vars Jup1 and Jup1;
    vars Jup2 and Jup2;
  enddef;
  def map between SERCA and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between intracellular_ions and ryr for
    vars cajsr and cajsr;
    vars cacsr and cacsr;
    vars Jrel1 and Jrel1;
    vars Jrel2 and Jrel2;
  enddef;
  def map between cell_geometry and ryr for
    vars Acap and Acap;
    vars vcsr and vcsr;
    vars vjsr and vjsr;
    vars vnsr and vnsr;
    vars vsl and vsl;
    vars vss and vss;
    vars vmyo and vmyo;
  enddef;
  def map between intracellular_ions and IP3 for
    vars cajsr and cajsr;
    vars cass and cass;
    vars Jip3 and Jip3;
  enddef;
  def map between ICaL and ryr for
    vars ICaL and ICaL;
  enddef;
  def map between SERCA and ryr for
    vars Jup2 and Jup2;
  enddef;
  def map between physical_constants and ryr for
    vars F and F;
  enddef;
  def map between diff and ryr for
    vars Jdiff and Jdiff;
    vars Jgap and Jgap;
  enddef;
  def map between ryr and CaMK for
    vars CaMKa and CaMKa;
  enddef;
  def map between ryr and IP3 for
    vars Jip3 and Jip3;
  enddef;
  def map between ryr and environment for
    vars time and time;
  enddef;
  def map between IP3 and environment for
    vars time and time;
  enddef;
  def map between intracellular_ions and diff for
    vars cai and cai;
    vars casl and casl;
    vars cass and cass;
    vars nai and nai;
    vars nasl and nasl;
    vars nass and nass;
    vars ki and ki;
    vars ksl and ksl;
    vars kss and kss;
    vars JdiffK and JdiffK;
    vars JgapK and JgapK;
    vars Jdiff and Jdiff;
    vars Jgap and Jgap;
    vars JdiffNa and JdiffNa;
    vars JgapNa and JgapNa;
  enddef;
  def map between IpCa and membrane for
    vars IpCa and IpCa;
  enddef;
  def map between intracellular_ions and IpCa for
    vars casl and casl;
    vars IpCa and IpCa;
  enddef;
  def map between extracellular and ICab for
    vars cao and cao;
  enddef;
  def map between intracellular_ions and ICab for
    vars casl and casl;
    vars ICab and ICab;
  enddef;
  def map between ICab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICab and ICab;
  enddef;
  def map between extracellular and INab for
    vars nao and nao;
  enddef;
  def map between intracellular_ions and INab for
    vars nasl and nasl;
    vars INab and INab;
  enddef;
  def map between INab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars INab and INab;
  enddef;
  def map between intracellular_ions and INaK for
    vars ksl and ksl;
    vars nasl and nasl;
    vars INaK and INaK;
  enddef;
  def map between INaK and membrane for
    vars v and v;
    vars INaK and INaK;
  enddef;
  def map between INaK and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zk and zk;
  enddef;
  def map between extracellular and INaK for
    vars nao and nao;
    vars ko and ko;
  enddef;
  def map between intracellular_ions and INaCa_i for
    vars casl and casl;
    vars nasl and nasl;
    vars nass and nass;
    vars cass and cass;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and membrane for
    vars v and v;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zca and zca;
  enddef;
  def map between extracellular and INaCa_i for
    vars nao and nao;
    vars cao and cao;
  enddef;
  def map between intracellular_ions and IKs for
    vars casl and casl;
    vars IKs and IKs;
  enddef;
  def map between intracellular_ions and ICaT for
    vars ICaT and ICaT;
  enddef;
  def map between intracellular_ions and Isus for
    vars Isus and Isus;
  enddef;
  def map between intracellular_ions and If for
    vars IfNa and IfNa;
    vars IfK and IfK;
  enddef;
  def map between IK1 and membrane for
    vars v and v;
    vars IK1 and IK1;
  enddef;
  def map between IK1 and environment for
    vars time and time;
  enddef;
  def map between IKs and membrane for
    vars v and v;
    vars IKs and IKs;
  enddef;
  def map between ICaT and membrane for
    vars v and v;
    vars ICaT and ICaT;
  enddef;
  def map between Isus and membrane for
    vars v and v;
    vars Isus and Isus;
  enddef;
  def map between If and membrane for
    vars v and v;
    vars If and If;
  enddef;
  def map between IKs and environment for
    vars time and time;
  enddef;
  def map between ICaT and environment for
    vars time and time;
  enddef;
  def map between If and environment for
    vars time and time;
  enddef;
  def map between IK1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKs and reversal_potentials for
    vars EKs and EKs;
  enddef;
  def map between ICaT and reversal_potentials for
    vars ECa and ECa;
  enddef;
  def map between Isus and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between If and reversal_potentials for
    vars ENa and ENa;
    vars EK and EK;
  enddef;
  def map between Ito and membrane for
    vars v and v;
    vars Ito and Ito;
  enddef;
  def map between INaL and membrane for
    vars v and v;
    vars INaL and INaL;
  enddef;
  def map between IKr and membrane for
    vars v and v;
    vars IKr and IKr;
  enddef;
  def map between IKr and environment for
    vars time and time;
  enddef;
  def map between INaL and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between Ito and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between INaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between INaL and INa for
    vars tm and tm;
  enddef;
  def map between INaL and environment for
    vars time and time;
  enddef;
  def map between ICaL and environment for
    vars time and time;
  enddef;
  def map between ICaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between CaMK and environment for
    vars time and time;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between ICaL and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ICaL for
    vars v and v;
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICaL and ICaL;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
  enddef;
  def map between membrane and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and ICaL for
    vars cass and cass;
    vars nass and nass;
    vars kss and kss;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
    vars ICaL and ICaL;
  enddef;
  def map between extracellular and IK1 for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between extracellular and ICaL for
    vars nao and nao;
    vars ko and ko;
    vars cao and cao;
  enddef;
  def map between extracellular and IKr for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IKr for
    vars IKr and IKr;
  enddef;
  def map between reversal_potentials and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and INa for
    vars ENa and ENa;
  enddef;
  def map between intracellular_ions and INa for
    vars INa and INa;
  enddef;
  def map between intracellular_ions and Ito for
    vars Ito and Ito;
  enddef;
  def map between membrane and INa for
    vars v and v;
    vars INa and INa;
  enddef;
  def map between CaMK and INa for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and environment for
    vars time and time;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between intracellular_ions and CaMK for
    vars cass and cass;
  enddef;
  def map between intracellular_ions and cell_geometry for
    vars Acap and Acap;
    vars vmyo and vmyo;
    vars vss and vss;
    vars vsl and vsl;
    vars vnsr and vnsr;
    vars vjsr and vjsr;
    vars vcsr and vcsr;
  enddef;
  def map between intracellular_ions and environment for
    vars time and time;
  enddef;
  def map between intracellular_ions and reversal_potentials for
    vars nasl and nasl;
    vars ksl and ksl;
    vars casl and casl;
  enddef;
  def map between extracellular and reversal_potentials for
    vars nao and nao;
    vars ko and ko;
    vars cao and cao;
  enddef;
enddef;
