def model HumanSAN_Fabbri_Fantini_Wilders_Severi_2017 as
  def unit per_millivolt as
    unit volt {expo: -1.0, pref: milli};
  enddef;
  def unit coulomb_per_mole as
    unit mole {expo: -1.0};
    unit coulomb;
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1.0};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0, pref: kilo};
  enddef;
  def unit per_second as
    unit second {expo: -1.0};
  enddef;
  def unit millimetre as
    unit metre {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1.0};
  enddef;
  def unit millivolt_second as
    unit second;
    unit millivolt;
  enddef;
  def unit nanoA_per_millimolar as
    unit millimolar {expo: -1.0};
    unit nanoA;
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1.0};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1.0};
    unit second {expo: -1.0};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1.0};
    unit second {expo: -1.0};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit litre_millimetre3 as
    unit millimetre3 {expo: -1.0};
    unit litre;
  enddef;
  def unit millimetre3 as
    unit metre {expo: 3.0, pref: milli};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit millimolar_per_second as
    unit second {expo: -1.0};
    unit millimolar;
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1.0};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4.0};
  enddef;
  def unit per_millimolar2_second as
    unit millimolar {expo: -2.0};
    unit second {expo: -1.0};
  enddef;
  def unit micrometre_per_femtometre as
    unit metre {expo: -1.0, pref: femto};
    unit micrometre;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp Membrane as
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var C: microF {init: 5.7e-5};
    var RTONF: millivolt {pub: out};
    var time: second {pub: in, priv: out};
    var i_f: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_Kr: nanoA {pub: in};
    var i_Ks: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_CaL: nanoA {pub: in};
    var i_CaT: nanoA {pub: in};
    var i_KACh: nanoA {pub: in};
    var i_Kur: nanoA {pub: in};
    var V: millivolt {pub: out};
    var clamp_mode: dimensionless {init: 0};
    var V_clamp: millivolt {priv: in};
    var V_ode: millivolt {init: -47.787168};
    var i_tot: nanoA;
    i_tot = i_f+i_Kr+i_Ks+i_to+i_NaK+i_NaCa+i_Na+i_CaL+i_CaT+i_KACh+i_Kur;
    ode(V_ode, time) = -i_tot/C;
    RTONF = R*T/F;
    V = sel
      case clamp_mode >= 1{dimensionless}:
        V_clamp;
      otherwise:
        V_ode;
    endsel;
  enddef;

  def comp Voltage_clamp as
    var t_holding: second {init: 0.5};
    var t_test: second {init: 0.5};
    var V_clamp: millivolt {pub: out};
    var V_test: millivolt {init: -35};
    var V_holding: millivolt {init: -45};
    var time: second {pub: in};
    V_clamp = sel
      case (time > t_holding) and (time < t_holding+t_test):
        V_test;
      otherwise:
        V_holding;
    endsel;
  enddef;

  def comp Rate_modulation_experiments as
    var ACh: millimolar {init: 0, pub: out};
    var Iso_1_uM: dimensionless {init: 0, pub: out};
  enddef;

  def comp Ionic_values as
    var Nai: millimolar {pub: in};
    var Nao: millimolar {init: 140, pub: out};
    var Ki: millimolar {init: 140, pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
    var Ca_sub: millimolar {pub: in};
    var Cao: millimolar {init: 1.8, pub: out};
    var RTONF: millivolt {pub: in};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    E_Na = RTONF*ln(Nao/Nai);
    E_K = RTONF*ln(Ko/Ki);
    E_Ca = 0.5{dimensionless}*RTONF*ln(Cao/Ca_sub);
  enddef;

  def comp Nai_concentration as
    var Nai: millimolar {pub: out};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var V_sub: millimetre3 {pub: in};
    var V_i: millimetre3 {pub: in};
    var i_Na: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_fNa: nanoA {pub: in};
    var i_siNa: nanoA {pub: in};
    var Nai_: millimolar {init: 5};
    var Nai_clamp: dimensionless {init: 1};
    ode(Nai_, time) = (1{dimensionless}-Nai_clamp)*(-1{mA_nA})*(i_Na+i_fNa+i_siNa+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(1{litre_millimetre3}*(V_i+V_sub)*F);
    Nai = Nai_;
  enddef;

  def comp i_f as
    var ACh: millimolar {pub: in, priv: out};
    var Iso_1_uM: dimensionless {pub: in, priv: out};
    var i_f: nanoA {pub: out};
    var i_fNa: nanoA {pub: out};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var i_fK: nanoA {pub: out};
    var g_f: microS {init: 0.00427};
    var G_f: microS;
    var g_f_Na: microS {pub: out};
    var G_f_Na: microS;
    var g_f_K: microS {pub: out};
    var G_f_K: microS;
    var Km_f: millimolar {init: 45};
    var alpha: dimensionless {init: 0.5927};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var RTONF: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var y: dimensionless {priv: in};
    var blockade: dimensionless {init: 0};
    G_f = g_f/(Ko/(Ko+Km_f));
    G_f_K = G_f/(alpha+1{dimensionless});
    G_f_Na = alpha*G_f_K;
    g_f_Na = G_f_Na*Ko/(Ko+Km_f);
    g_f_K = G_f_K*Ko/(Ko+Km_f);
    i_fNa = y*g_f_Na*(V-E_Na)*(1{dimensionless}-blockade);
    i_fK = y*g_f_K*(V-E_K)*(1{dimensionless}-blockade);
    i_f = i_fNa+i_fK;
  enddef;

  def comp i_f_y_gate as
    var y: dimensionless {init: 0.009508, pub: out};
    var tau_y: second;
    var y_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var ACh_shift: millivolt;
    var ACh: millimolar {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var Iso_shift: millivolt;
    var y_shift: millivolt {init: 0};
    ACh_shift = sel
      case ACh > 0{millimolar}:
        -1{millivolt}-9.898{millivolt}*pow(1{per_millimolar}*ACh, 0.618{dimensionless})/(pow(1{per_millimolar}*ACh, 0.618{dimensionless})+0.00122423{dimensionless});
      otherwise:
        0{millivolt};
    endsel;
    Iso_shift = sel
      case Iso_1_uM > 0{dimensionless}:
        7.5{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    tau_y = 1{dimensionless}/(0.36{per_millivolt_second}*(V+148.8{millivolt}-ACh_shift-Iso_shift)/(exp(0.066{per_millivolt}*(V+148.8{millivolt}-ACh_shift-Iso_shift))-1{dimensionless})+0.1{per_millivolt_second}*(V+87.3{millivolt}-ACh_shift-Iso_shift)/(1{dimensionless}-exp(-0.2{per_millivolt}*(V+87.3{millivolt}-ACh_shift-Iso_shift))))-0.054{second};
    y_infinity = sel
      case V < -(80{millivolt}-ACh_shift-Iso_shift-y_shift):
        0.01329{dimensionless}+0.99921{dimensionless}/(1{dimensionless}+exp((V+97.134{millivolt}-ACh_shift-Iso_shift-y_shift)/8.1752{millivolt}));
      otherwise:
        0.0002501{dimensionless}*exp(-(V-ACh_shift-Iso_shift-y_shift)/12.861{millivolt});
    endsel;
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp i_NaK as
    var i_NaK: nanoA {pub: out};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Km_Kp: millimolar {init: 1.4};
    var Km_Nap: millimolar {init: 14};
    var i_NaK_max: nanoA {init: 0.08105};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var Iso_increase: dimensionless;
    var Iso_1_uM: dimensionless {pub: in, priv: out};
    Iso_increase = sel
      case Iso_1_uM > 0{dimensionless}:
        1.2{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_NaK = Iso_increase*i_NaK_max*pow(1{dimensionless}+pow(Km_Kp/Ko, 1.2{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+pow(Km_Nap/Nai, 1.3{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+exp(-(V-E_Na+110{millivolt})/20{millivolt}), -1{dimensionless});
  enddef;

  def comp i_NaCa as
    var i_NaCa: nanoA {pub: out};
    var K_NaCa: nanoA {init: 3.343};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 0.1369};
    var Qn: dimensionless {init: 0.4315};
    var Qco: dimensionless {init: 0};
    var K3ni: millimolar {init: 26.44};
    var Kci: millimolar {init: 0.0207};
    var K1ni: millimolar {init: 395.3};
    var K2ni: millimolar {init: 2.289};
    var Kcni: millimolar {init: 26.44};
    var K3no: millimolar {init: 4.663};
    var K1no: millimolar {init: 1628};
    var K2no: millimolar {init: 561.4};
    var Kco: millimolar {init: 3.663};
    var do: dimensionless;
    var di: dimensionless;
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var blockade_NaCa: dimensionless {init: 0};
    i_NaCa = (1{dimensionless}-blockade_NaCa)*K_NaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    k12 = Ca_sub/Kci*exp(-Qci*V/RTONF)/di;
    k14 = Nai/K1ni*Nai/K2ni*(1{dimensionless}+Nai/K3ni)*exp(Qn*V/(2{dimensionless}*RTONF))/di;
    k41 = exp(-Qn*V/(2{dimensionless}*RTONF));
    di = 1{dimensionless}+Ca_sub/Kci*(1{dimensionless}+exp(-Qci*V/RTONF)+Nai/Kcni)+Nai/K1ni*(1{dimensionless}+Nai/K2ni*(1{dimensionless}+Nai/K3ni));
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*V/RTONF)/do;
    k23 = Nao/K1no*Nao/K2no*(1{dimensionless}+Nao/K3no)*exp(-Qn*V/(2{dimensionless}*RTONF))/do;
    k32 = exp(Qn*V/(2{dimensionless}*RTONF));
    do = 1{dimensionless}+Cao/Kco*(1{dimensionless}+exp(Qco*V/RTONF))+Nao/K1no*(1{dimensionless}+Nao/K2no*(1{dimensionless}+Nao/K3no));
  enddef;

  def comp i_Na as
    var i_Na_: nanoA {pub: out};
    var i_Na_L: nanoA {pub: out};
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 0.0223};
    var g_Na_L: microS {init: 0};
    var E_mh: millivolt;
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_mh = RTONF*ln((Nao+0.12{dimensionless}*Ko)/(Nai+0.12{dimensionless}*Ki));
    i_Na_ = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
    i_Na_L = g_Na_L*pow(m, 3{dimensionless})*(V-E_mh);
    i_Na = i_Na_+i_Na_L;
  enddef;

  def comp i_Na_m_gate as
    var m: dimensionless {init: 0.447724, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var m_infinity: dimensionless;
    var tau_m: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+42.0504{millivolt})/8.3106{millivolt}));
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    tau_m = 1{dimensionless}/(alpha_m+beta_m);
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp i_Na_h_gate as
    var h: dimensionless {init: 0.003058, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var h_infinity: dimensionless;
    var tau_h: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+69.804{millivolt})/4.4565{millivolt}));
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}))+1{dimensionless});
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp i_CaL as
    var i_CaL: nanoA {pub: out};
    var i_siCa: nanoA {pub: out};
    var i_siK: nanoA {pub: out};
    var i_siNa: nanoA {pub: out};
    var ACh_block: dimensionless;
    var ACh: millimolar {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var P_CaL: nanoA_per_millimolar {init: 0.4578};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in, priv: out};
    var dL: dimensionless {priv: in};
    var fL: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    var Iso_increase: dimensionless;
    var Iso_1_uM: dimensionless {pub: in, priv: out};
    Iso_increase = sel
      case Iso_1_uM > 0{dimensionless}:
        1.23{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_siCa = 2{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siK = 0.000365{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Ki-Ko*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siNa = 0.0000185{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Nai-Nao*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    ACh_block = 0.31{dimensionless}*ACh/(ACh+0.00009{millimolar});
    i_CaL = (i_siCa+i_siK+i_siNa)*(1{dimensionless}-ACh_block)*1{dimensionless}*Iso_increase;
  enddef;

  def comp i_CaL_dL_gate as
    var dL: dimensionless {init: 0.001921, pub: out};
    var dL_infinity: dimensionless;
    var tau_dL: second;
    var alpha_dL: per_second;
    var beta_dL: per_second;
    var adVm: millivolt;
    var bdVm: millivolt;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var k_dL: millivolt {init: 4.3371};
    var V_dL: millivolt {init: -16.4508};
    var Iso_shift_dL: millivolt;
    var Iso_slope_dL: dimensionless;
    Iso_shift_dL = sel
      case Iso_1_uM > 0{dimensionless}:
        -8{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    Iso_slope_dL = sel
      case Iso_1_uM > 0{dimensionless}:
        -27{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    dL_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-V_dL-Iso_shift_dL)/(k_dL*(1{dimensionless}+Iso_slope_dL/100{dimensionless}))));
    tau_dL = 0.001{dimensionless}/(alpha_dL+beta_dL);
    alpha_dL = -0.02839{per_millivolt_second}*(adVm+41.8{millivolt})/(exp(-(adVm+41.8{millivolt})/2.5{millivolt})-1{dimensionless})-0.0849{per_millivolt_second}*(adVm+6.8{millivolt})/(exp(-(adVm+6.8{millivolt})/4.8{millivolt})-1{dimensionless});
    adVm = sel
      case V == -41.8{millivolt}:
        -41.80001{millivolt};
      case V == 0{millivolt}:
        0{millivolt};
      case V == -6.8{millivolt}:
        -6.80001{millivolt};
      otherwise:
        V;
    endsel;
    beta_dL = 0.01143{per_millivolt_second}*(bdVm+1.8{millivolt})/(exp((bdVm+1.8{millivolt})/2.5{millivolt})-1{dimensionless});
    bdVm = sel
      case V == -1.8{millivolt}:
        -1.80001{millivolt};
      otherwise:
        V;
    endsel;
    ode(dL, time) = (dL_infinity-dL)/tau_dL;
  enddef;

  def comp i_CaL_fL_gate as
    var fL: dimensionless {init: 0.846702, pub: out};
    var fL_infinity: dimensionless;
    var tau_fL: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var shift_fL: millivolt {init: 0};
    var k_fL: millivolt {init: 0};
    fL_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+37.4{millivolt}+shift_fL)/(5.3{millivolt}+k_fL)));
    tau_fL = 0.001{dimensionless}*(44.3{second}+230{second}*exp(-sqr((V+36{millivolt})/10{millivolt})));
    ode(fL, time) = (fL_infinity-fL)/tau_fL;
  enddef;

  def comp i_CaL_fCa_gate as
    var fCa: dimensionless {init: 0.844449, pub: out};
    var alpha_fCa: per_second {init: 0.0075};
    var fCa_infinity: dimensionless;
    var tau_fCa: second;
    var Km_fCa: millimolar {init: 0.000338};
    var V: millivolt {pub: in};
    var Ca_sub: millimolar {pub: in};
    var time: second {pub: in};
    fCa_infinity = Km_fCa/(Km_fCa+Ca_sub);
    tau_fCa = 0.001{dimensionless}*fCa_infinity/alpha_fCa;
    ode(fCa, time) = (fCa_infinity-fCa)/tau_fCa;
  enddef;

  def comp i_CaT as
    var i_CaT: nanoA {pub: out};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var P_CaT: nanoA_per_millimolar {init: 0.04132};
    var RTONF: millivolt {pub: in};
    var Cao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in, priv: out};
    var dT: dimensionless {priv: in};
    var fT: dimensionless {priv: in};
    i_CaT = 2{dimensionless}*P_CaT*V/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*V*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*V/RTONF))*dT*fT;
  enddef;

  def comp i_CaT_dT_gate as
    var dT: dimensionless {init: 0.268909, pub: out};
    var dT_infinity: dimensionless;
    var tau_dT: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    dT_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+38.3{millivolt})/5.5{millivolt}));
    tau_dT = 0.001{second}/(1.068{dimensionless}*exp((V+38.3{millivolt})/30{millivolt})+1.068{dimensionless}*exp(-(V+38.3{millivolt})/30{millivolt}));
    ode(dT, time) = (dT_infinity-dT)/tau_dT;
  enddef;

  def comp i_CaT_fT_gate as
    var fT: dimensionless {init: 0.020484, pub: out};
    var fT_infinity: dimensionless;
    var tau_fT: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var offset_fT: second {init: 0};
    fT_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+58.7{millivolt})/3.8{millivolt}));
    tau_fT = 1{second}/(16.67{dimensionless}*exp(-(V+75{millivolt})/83.3{millivolt})+16.67{dimensionless}*exp((V+75{millivolt})/15.38{millivolt}))+offset_fT;
    ode(fT, time) = (fT_infinity-fT)/tau_fT;
  enddef;

  def comp Ca_SR_release as
    var j_SRCarel: millimolar_per_second {pub: out};
    var R: dimensionless {init: 0.9308};
    var O: dimensionless {init: 6.181512e-9};
    var I: dimensionless {init: 4.595622e-10};
    var RI: dimensionless {init: 0.069199};
    var ks: per_second {init: 148041085.1};
    var MaxSR: dimensionless {init: 15};
    var MinSR: dimensionless {init: 1};
    var EC50_SR: millimolar {init: 0.45};
    var HSR: dimensionless {init: 2.5};
    var koSRCa: per_millimolar2_second;
    var kiSRCa: per_millimolar_second;
    var koCa: per_millimolar2_second {init: 10000};
    var kiCa: per_millimolar_second {init: 500};
    var kCaSR: dimensionless;
    var kim: per_second {init: 5};
    var kom: per_second {init: 660};
    var time: second {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    var diff: millimolar;
    var P_tot: dimensionless;
    j_SRCarel = ks*O*(Ca_jsr-Ca_sub);
    diff = Ca_jsr-Ca_sub;
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(EC50_SR/Ca_jsr, HSR));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    ode(R, time) = kim*RI-kiSRCa*Ca_sub*R-(koSRCa*sqr(Ca_sub)*R-kom*O);
    ode(O, time) = koSRCa*sqr(Ca_sub)*R-kom*O-(kiSRCa*Ca_sub*O-kim*I);
    ode(I, time) = kiSRCa*Ca_sub*O-kim*I-(kom*I-koSRCa*sqr(Ca_sub)*RI);
    ode(RI, time) = kom*I-koSRCa*sqr(Ca_sub)*RI-(kim*RI-kiSRCa*Ca_sub*R);
    P_tot = R+O+I+RI;
  enddef;

  def comp Ca_intracellular_fluxes as
    var j_Ca_dif: millimolar_per_second {pub: out};
    var j_up: millimolar_per_second {pub: out};
    var j_tr: millimolar_per_second {pub: out};
    var tau_dif_Ca: second {init: 5.469e-5};
    var tau_tr: second {init: 0.04};
    var P_up: millimolar_per_second;
    var P_up_basal: millimolar_per_second {init: 5};
    var b_up: dimensionless;
    var ACh: millimolar {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var K_up: millimolar {init: 0.000286113};
    var Ca_nsr: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    var slope_up: millimolar {init: 5e-5};
    b_up = sel
      case Iso_1_uM > 0{dimensionless}:
        -0.25{dimensionless};
      case ACh > 0{millimolar}:
        0.7{dimensionless}*ACh/(0.00009{millimolar}+ACh);
      otherwise:
        0{dimensionless};
    endsel;
    P_up = P_up_basal*(1{dimensionless}-b_up);
    j_Ca_dif = (Ca_sub-Cai)/tau_dif_Ca;
    j_up = P_up/(1{dimensionless}+exp((-Cai+K_up)/slope_up));
    j_tr = (Ca_nsr-Ca_jsr)/tau_tr;
  enddef;

  def comp Ca_buffering as
    var TC_tot: millimolar {init: 0.031, pub: out};
    var TMC_tot: millimolar {init: 0.062, pub: out};
    var CM_tot: millimolar {init: 0.045, pub: out};
    var CQ_tot: millimolar {init: 10, pub: out};
    var delta_fTC: per_second {pub: out};
    var delta_fTMC: per_second {pub: out};
    var delta_fCMs: per_second {pub: out};
    var delta_fCMi: per_second {pub: out};
    var delta_fCQ: per_second {pub: out};
    var delta_fTMM: per_second;
    var fTMM: dimensionless {init: 0.653777};
    var fCMi: dimensionless {init: 0.217311};
    var fCMs: dimensionless {init: 0.158521};
    var fTC: dimensionless {init: 0.017929};
    var fTMC: dimensionless {init: 0.259947};
    var fCQ: dimensionless {init: 0.138975};
    var kf_TC: per_millimolar_second {init: 88800};
    var kf_TMM: per_millimolar_second {init: 2277};
    var kf_TMC: per_millimolar_second {init: 227700};
    var kf_CM: per_millimolar_second {init: 1.642e6};
    var kf_CQ: per_millimolar_second {init: 175.4};
    var kb_TC: per_second {init: 446};
    var kb_TMC: per_second {init: 7.51};
    var kb_TMM: per_second {init: 751};
    var kb_CM: per_second {init: 542};
    var kb_CQ: per_second {init: 445};
    var time: second {pub: in};
    var Mgi: millimolar {init: 2.5};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    ode(fTC, time) = delta_fTC;
    delta_fTC = kf_TC*Cai*(1{dimensionless}-fTC)-kb_TC*fTC;
    ode(fTMC, time) = delta_fTMC;
    delta_fTMC = kf_TMC*Cai*(1{dimensionless}-(fTMC+fTMM))-kb_TMC*fTMC;
    ode(fTMM, time) = delta_fTMM;
    delta_fTMM = kf_TMM*Mgi*(1{dimensionless}-(fTMC+fTMM))-kb_TMM*fTMM;
    ode(fCMi, time) = delta_fCMi;
    delta_fCMi = kf_CM*Cai*(1{dimensionless}-fCMi)-kb_CM*fCMi;
    ode(fCMs, time) = delta_fCMs;
    delta_fCMs = kf_CM*Ca_sub*(1{dimensionless}-fCMs)-kb_CM*fCMs;
    ode(fCQ, time) = delta_fCQ;
    delta_fCQ = kf_CQ*Ca_jsr*(1{dimensionless}-fCQ)-kb_CQ*fCQ;
  enddef;

  def comp Ca_dynamics as
    var Cai: millimolar {init: 9.15641e-6, pub: out};
    var Ca_nsr: millimolar {init: 0.435148, pub: out};
    var Ca_jsr: millimolar {init: 0.409551, pub: out};
    var Ca_sub: millimolar {init: 6.226104e-5, pub: out};
    var V_i: millimetre3 {pub: in};
    var V_jsr: millimetre3 {pub: in};
    var V_nsr: millimetre3 {pub: in};
    var V_sub: millimetre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_siCa: nanoA {pub: in};
    var i_CaT: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var j_SRCarel: millimolar_per_second {pub: in};
    var j_Ca_dif: millimolar_per_second {pub: in};
    var j_tr: millimolar_per_second {pub: in};
    var j_up: millimolar_per_second {pub: in};
    var TMC_tot: millimolar {pub: in};
    var CM_tot: millimolar {pub: in};
    var TC_tot: millimolar {pub: in};
    var CQ_tot: millimolar {pub: in};
    var delta_fTMC: per_second {pub: in};
    var delta_fCMi: per_second {pub: in};
    var delta_fCMs: per_second {pub: in};
    var delta_fTC: per_second {pub: in};
    var delta_fCQ: per_second {pub: in};
    ode(Cai, time) = 1{dimensionless}*(j_Ca_dif*V_sub-j_up*V_nsr)/V_i-(CM_tot*delta_fCMi+TC_tot*delta_fTC+TMC_tot*delta_fTMC);
    ode(Ca_sub, time) = j_SRCarel*V_jsr/V_sub-((i_siCa+i_CaT-2{dimensionless}*i_NaCa)/(2{dimensionless}*F*V_sub)+j_Ca_dif+CM_tot*delta_fCMs);
    ode(Ca_nsr, time) = j_up-j_tr*V_jsr/V_nsr;
    ode(Ca_jsr, time) = j_tr-(j_SRCarel+CQ_tot*delta_fCQ);
  enddef;

  def comp Cell_parameters as
    var V_sub: millimetre3 {pub: out};
    var V_jsr: millimetre3 {pub: out};
    var V_nsr: millimetre3 {pub: out};
    var V_i: millimetre3 {pub: out};
    var V_cell: millimetre3;
    var V_jsr_part: dimensionless {init: 0.0012};
    var V_i_part: dimensionless {init: 0.46};
    var V_nsr_part: dimensionless {init: 0.0116};
    var R_cell: micrometre {init: 3.9};
    var L_cell: micrometre {init: 67};
    var L_sub: micrometre {init: 0.02};
    V_cell = 0.000000001{micrometre_per_femtometre}*pi*sqr(R_cell)*L_cell;
    V_sub = 0.000000001{micrometre_per_femtometre}*2{dimensionless}*pi*L_sub*(R_cell-L_sub/2{dimensionless})*L_cell;
    V_jsr = V_jsr_part*V_cell;
    V_i = V_i_part*V_cell-V_sub;
    V_nsr = V_nsr_part*V_cell;
  enddef;

  def comp i_Kur as
    var i_Kur: nanoA {pub: out};
    var g_Kur: microS {init: 0.1539e-3};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var r_Kur: dimensionless {priv: in};
    var s_Kur: dimensionless {priv: in};
    i_Kur = g_Kur*r_Kur*s_Kur*(V-E_K);
  enddef;

  def comp i_Kur_rKur_gate as
    var r_Kur: dimensionless {init: 0.011845, pub: out};
    var tau_r_Kur: second;
    var r_Kur_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r_Kur, time) = (r_Kur_infinity-r_Kur)/tau_r_Kur;
    r_Kur_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+6{millivolt})/(-8.6{millivolt})));
    tau_r_Kur = 0.009{second}/(1{dimensionless}+exp((V+5{millivolt})/12{millivolt}))+0.0005{second};
  enddef;

  def comp i_Kur_sKur_gate as
    var s_Kur: dimensionless {init: 0.845304, pub: out};
    var tau_s_Kur: second;
    var s_Kur_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(s_Kur, time) = (s_Kur_infinity-s_Kur)/tau_s_Kur;
    s_Kur_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+7.5{millivolt})/10{millivolt}));
    tau_s_Kur = 0.59{second}/(1{dimensionless}+exp((V+60{millivolt})/10{millivolt}))+3.05{second};
  enddef;

  def comp i_to as
    var i_to: nanoA {pub: out};
    var g_to: microS {init: 3.5e-3};
    var E_K: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(V-E_K)*q*r;
  enddef;

  def comp i_to_q_gate as
    var q: dimensionless {init: 0.430836, pub: out};
    var q_infinity: dimensionless;
    var tau_q: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+49{millivolt})/13{millivolt}));
    tau_q = 0.001{dimensionless}*0.6{dimensionless}*(65.17{dimensionless}/(0.57{per_second}*exp(-0.08{per_millivolt}*(V+44{millivolt}))+0.065{per_second}*exp(0.1{per_millivolt}*(V+45.93{millivolt})))+10.1{second});
    ode(q, time) = (q_infinity-q)/tau_q;
  enddef;

  def comp i_to_r_gate as
    var r: dimensionless {init: 0.014523, pub: out};
    var r_infinity: dimensionless;
    var tau_r: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-19.3{millivolt})/15{millivolt}));
    tau_r = 0.001{dimensionless}*0.66{dimensionless}*1.4{dimensionless}*(15.59{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt})))+2.98{second});
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp i_Kr as
    var i_Kr: nanoA {pub: out};
    var g_Kr: microS {init: 0.00424};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var paS: dimensionless {priv: in};
    var paF: dimensionless {priv: in};
    var piy: dimensionless {priv: in};
    var RTONF: millivolt {pub: in};
    i_Kr = g_Kr*(V-E_K)*(0.9{dimensionless}*paF+0.1{dimensionless}*paS)*piy;
  enddef;

  def comp i_Kr_pa_gate as
    var paS: dimensionless {init: 0.283185, pub: out};
    var paF: dimensionless {init: 0.011068, pub: out};
    var pa_infinity: dimensionless;
    var alfapaF: per_second;
    var betapaF: per_second;
    var tau_paS: second;
    var tau_paF: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alfapaF = 1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/6.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/11.9{millivolt})+0.96{dimensionless}*exp(-V/18.5{millivolt})));
    betapaF = 4{dimensionless}*((37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))/0.84655354{second}-1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/10.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))));
    pa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+10.0144{millivolt})/7.6607{millivolt}));
    tau_paS = 0.84655354{second}/(4.2{dimensionless}*exp(V/17{millivolt})+0.15{dimensionless}*exp(-V/21.6{millivolt}));
    tau_paF = 1{second}/(30{dimensionless}*exp(V/10{millivolt})+exp(-V/12{millivolt}));
    ode(paS, time) = (pa_infinity-paS)/tau_paS;
    ode(paF, time) = (pa_infinity-paF)/tau_paF;
  enddef;

  def comp i_Kr_pi_gate as
    var piy: dimensionless {init: 0.709051, pub: out};
    var pi_infinity: dimensionless;
    var tau_pi: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    tau_pi = 1{second}/(100{dimensionless}*exp(-V/54.645{millivolt})+656{dimensionless}*exp(V/106.157{millivolt}));
    pi_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.6{millivolt})/17.1{millivolt}));
    ode(piy, time) = (pi_infinity-piy)/tau_pi;
  enddef;

  def comp i_Ks as
    var i_Ks: nanoA {pub: out};
    var g_Ks: microS {pub: out};
    var g_Ks_: microS {init: 0.00065};
    var E_Ks: millivolt;
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    var n: dimensionless {priv: in};
    var Iso_1_uM: dimensionless {pub: in, priv: out};
    g_Ks = sel
      case Iso_1_uM > 0{dimensionless}:
        1.2{dimensionless}*g_Ks_;
      otherwise:
        g_Ks_;
    endsel;
    E_Ks = RTONF*ln((Ko+0.12{dimensionless}*Nao)/(Ki+0.12{dimensionless}*Nai));
    i_Ks = g_Ks*(V-E_Ks)*sqr(n);
  enddef;

  def comp i_Ks_n_gate as
    var n: dimensionless {init: 0.1162, pub: out};
    var n_infinity: dimensionless;
    var tau_n: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var Iso_shift: millivolt;
    var alpha_n: per_second;
    var beta_n: per_second;
    Iso_shift = sel
      case Iso_1_uM > 0{dimensionless}:
        -14{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    n_infinity = sqrt(1{dimensionless}/(1{dimensionless}+exp(-(V+0.6383{millivolt}-Iso_shift)/10.7071{millivolt})));
    tau_n = 1{dimensionless}/(alpha_n+beta_n);
    alpha_n = 28{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift)/3{millivolt}));
    beta_n = 1{per_second}*exp(-(V-Iso_shift-5{millivolt})/25{millivolt});
    ode(n, time) = (n_infinity-n)/tau_n;
  enddef;

  def comp i_KACh as
    var ACh: millimolar {pub: in, priv: out};
    var i_KACh: nanoA {pub: out};
    var g_KACh: microS {init: 0.00345};
    var E_K: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var a: dimensionless {priv: in};
    var ACh_on: dimensionless {init: 1};
    i_KACh = sel
      case ACh > 0{millimolar}:
        ACh_on*g_KACh*(V-E_K)*(1{dimensionless}+exp((V+20{millivolt})/20{millivolt}))*a;
      otherwise:
        0{nanoA};
    endsel;
  enddef;

  def comp i_KACh_a_gate as
    var a: dimensionless {init: 0.00277, pub: out};
    var alpha_a: per_second;
    var beta_a: per_second;
    var a_infinity: dimensionless;
    var tau_a: second;
    var ACh: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_a = (3.5988{per_second}-0.025641{per_second})/(1{dimensionless}+0.0000012155{dimensionless}/pow(1{per_millimolar}*ACh, 1.6951{dimensionless}))+0.025641{per_second};
    beta_a = 10{per_second}*exp(0.0133{per_millivolt}*(V+40{millivolt}));
    a_infinity = alpha_a/(alpha_a+beta_a);
    tau_a = 1{dimensionless}/(alpha_a+beta_a);
    ode(a, time) = (a_infinity-a)/tau_a;
  enddef;

  def group as containment for
    comp Membrane incl
      comp Nai_concentration;
      comp Cell_parameters;
      comp Voltage_clamp;
      comp i_Kur incl
        comp i_Kur_sKur_gate;
        comp i_Kur_rKur_gate;
      endcomp;
      comp Ca_buffering;
      comp Ca_dynamics;
      comp Rate_modulation_experiments;
      comp i_KACh incl
        comp i_KACh_a_gate;
      endcomp;
      comp i_NaK;
      comp i_CaL incl
        comp i_CaL_fCa_gate;
        comp i_CaL_dL_gate;
        comp i_CaL_fL_gate;
      endcomp;
      comp i_NaCa;
      comp i_Kr incl
        comp i_Kr_pi_gate;
        comp i_Kr_pa_gate;
      endcomp;
      comp i_CaT incl
        comp i_CaT_fT_gate;
        comp i_CaT_dT_gate;
      endcomp;
      comp i_Ks incl
        comp i_Ks_n_gate;
      endcomp;
      comp i_to incl
        comp i_to_q_gate;
        comp i_to_r_gate;
      endcomp;
      comp i_Na incl
        comp i_Na_m_gate;
        comp i_Na_h_gate;
      endcomp;
      comp Ionic_values;
      comp Ca_intracellular_fluxes;
      comp i_f incl
        comp i_f_y_gate;
      endcomp;
      comp Ca_SR_release;
    endcomp;
  enddef;

  def group as encapsulation for
    comp i_CaL incl
      comp i_CaL_fCa_gate;
      comp i_CaL_dL_gate;
      comp i_CaL_fL_gate;
    endcomp;
    comp i_Kr incl
      comp i_Kr_pi_gate;
      comp i_Kr_pa_gate;
    endcomp;
    comp i_CaT incl
      comp i_CaT_fT_gate;
      comp i_CaT_dT_gate;
    endcomp;
    comp i_Kur incl
      comp i_Kur_sKur_gate;
      comp i_Kur_rKur_gate;
    endcomp;
    comp i_KACh incl
      comp i_KACh_a_gate;
    endcomp;
    comp Membrane incl
      comp Voltage_clamp;
    endcomp;
    comp i_Ks incl
      comp i_Ks_n_gate;
    endcomp;
    comp i_Na incl
      comp i_Na_m_gate;
      comp i_Na_h_gate;
    endcomp;
    comp i_to incl
      comp i_to_q_gate;
      comp i_to_r_gate;
    endcomp;
    comp i_f incl
      comp i_f_y_gate;
    endcomp;
  enddef;
  def map between environment and i_Ks for
    vars time and time;
  enddef;
  def map between Membrane and Voltage_clamp for
    vars time and time;
  enddef;
  def map between i_f and i_f_y_gate for
    vars time and time;
    vars V and V;
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_to_r_gate and i_to for
    vars r and r;
  enddef;
  def map between Nai_concentration and i_NaCa for
    vars Nai and Nai;
  enddef;
  def map between Ionic_values and i_f for
    vars E_Na and E_Na;
    vars E_K and E_K;
    vars Ko and Ko;
  enddef;
  def map between Ca_intracellular_fluxes and Ca_dynamics for
    vars j_tr and j_tr;
    vars j_up and j_up;
    vars j_Ca_dif and j_Ca_dif;
  enddef;
  def map between i_NaK and Membrane for
    vars i_NaK and i_NaK;
  enddef;
  def map between environment and i_to for
    vars time and time;
  enddef;
  def map between Ionic_values and i_Kur for
    vars E_K and E_K;
  enddef;
  def map between Nai_concentration and i_NaK for
    vars Nai and Nai;
  enddef;
  def map between i_Na_h_gate and i_Na for
    vars h and h;
  enddef;
  def map between Cell_parameters and Nai_concentration for
    vars V_sub and V_sub;
    vars V_i and V_i;
  enddef;
  def map between i_Ks and Membrane for
    vars i_Ks and i_Ks;
  enddef;
  def map between Ionic_values and i_to for
    vars E_K and E_K;
  enddef;
  def map between environment and i_CaT for
    vars time and time;
  enddef;
  def map between i_CaT and Membrane for
    vars i_CaT and i_CaT;
  enddef;
  def map between Ionic_values and i_Ks for
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between Nai_concentration and i_Ks for
    vars Nai and Nai;
  enddef;
  def map between i_Kur and i_Kur_rKur_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between i_CaL and Membrane for
    vars i_CaL and i_CaL;
  enddef;
  def map between Membrane and i_CaT for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between Rate_modulation_experiments and i_Ks for
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_Ks and i_Ks_n_gate for
    vars time and time;
    vars V and V;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between Membrane and i_Na for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between i_f and Membrane for
    vars i_f and i_f;
  enddef;
  def map between Membrane and i_Kr for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between Ca_dynamics and Ca_intracellular_fluxes for
    vars Cai and Cai;
    vars Ca_jsr and Ca_jsr;
    vars Ca_sub and Ca_sub;
    vars Ca_nsr and Ca_nsr;
  enddef;
  def map between Membrane and Nai_concentration for
    vars F and F;
  enddef;
  def map between i_Na and i_Na_m_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between environment and Membrane for
    vars time and time;
  enddef;
  def map between Ca_dynamics and i_CaL for
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_KACh and Membrane for
    vars i_KACh and i_KACh;
  enddef;
  def map between i_CaT_fT_gate and i_CaT for
    vars fT and fT;
  enddef;
  def map between i_f_y_gate and i_f for
    vars y and y;
  enddef;
  def map between i_CaT and i_CaT_fT_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between Ionic_values and i_NaCa for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between i_Kur_sKur_gate and i_Kur for
    vars s_Kur and s_Kur;
  enddef;
  def map between i_CaL and Nai_concentration for
    vars i_siNa and i_siNa;
  enddef;
  def map between i_Na_m_gate and i_Na for
    vars m and m;
  enddef;
  def map between environment and Nai_concentration for
    vars time and time;
  enddef;
  def map between Rate_modulation_experiments and i_KACh for
    vars ACh and ACh;
  enddef;
  def map between i_Na and i_Na_h_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between Ionic_values and i_Na for
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between Ca_dynamics and Ca_buffering for
    vars Cai and Cai;
    vars Ca_jsr and Ca_jsr;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Ca_dynamics and i_NaCa for
    vars Ca_sub and Ca_sub;
  enddef;
  def map between environment and Ca_dynamics for
    vars time and time;
  enddef;
  def map between Membrane and i_NaK for
    vars V and V;
  enddef;
  def map between Nai_concentration and i_CaL for
    vars Nai and Nai;
  enddef;
  def map between i_Kur_rKur_gate and i_Kur for
    vars r_Kur and r_Kur;
  enddef;
  def map between i_Kr_pa_gate and i_Kr for
    vars paF and paF;
    vars paS and paS;
  enddef;
  def map between environment and i_KACh for
    vars time and time;
  enddef;
  def map between Rate_modulation_experiments and Ca_intracellular_fluxes for
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between i_Na and Nai_concentration for
    vars i_Na and i_Na;
  enddef;
  def map between environment and i_CaL for
    vars time and time;
  enddef;
  def map between i_NaCa and Ca_dynamics for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between i_CaL and i_CaL_fCa_gate for
    vars V and V;
    vars Ca_sub and Ca_sub;
    vars time and time;
  enddef;
  def map between Cell_parameters and Ca_dynamics for
    vars V_sub and V_sub;
    vars V_jsr and V_jsr;
    vars V_nsr and V_nsr;
    vars V_i and V_i;
  enddef;
  def map between i_Kur and i_Kur_sKur_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_dynamics and i_CaT for
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_Kr and i_Kr_pi_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between i_to_q_gate and i_to for
    vars q and q;
  enddef;
  def map between i_CaL and i_CaL_fL_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between Rate_modulation_experiments and i_f for
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between Voltage_clamp and Membrane for
    vars V_clamp and V_clamp;
  enddef;
  def map between environment and i_f for
    vars time and time;
  enddef;
  def map between Ca_dynamics and Ionic_values for
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Ca_SR_release and Ca_dynamics for
    vars j_SRCarel and j_SRCarel;
  enddef;
  def map between i_Kr and i_Kr_pa_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between i_KACh_a_gate and i_KACh for
    vars a and a;
  enddef;
  def map between i_f and Nai_concentration for
    vars i_fNa and i_fNa;
  enddef;
  def map between environment and i_Na for
    vars time and time;
  enddef;
  def map between Rate_modulation_experiments and i_NaK for
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between Rate_modulation_experiments and i_CaL for
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
  enddef;
  def map between Membrane and i_Ks for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between Ionic_values and i_Kr for
    vars E_K and E_K;
    vars Ko and Ko;
  enddef;
  def map between i_NaCa and Nai_concentration for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Membrane and Ionic_values for
    vars RTONF and RTONF;
  enddef;
  def map between i_CaL_fL_gate and i_CaL for
    vars fL and fL;
  enddef;
  def map between Membrane and i_Kur for
    vars V and V;
  enddef;
  def map between environment and Ca_SR_release for
    vars time and time;
  enddef;
  def map between Ionic_values and i_CaT for
    vars Cao and Cao;
  enddef;
  def map between i_to and i_to_q_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between i_CaL_fCa_gate and i_CaL for
    vars fCa and fCa;
  enddef;
  def map between i_CaL and Ca_dynamics for
    vars i_siCa and i_siCa;
  enddef;
  def map between i_NaK and Nai_concentration for
    vars i_NaK and i_NaK;
  enddef;
  def map between i_Na and Membrane for
    vars i_Na and i_Na;
  enddef;
  def map between Ionic_values and i_CaL for
    vars Cao and Cao;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between i_CaL_dL_gate and i_CaL for
    vars dL and dL;
  enddef;
  def map between i_CaT and Ca_dynamics for
    vars i_CaT and i_CaT;
  enddef;
  def map between i_Kr_pi_gate and i_Kr for
    vars piy and piy;
  enddef;
  def map between Membrane and i_CaL for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between i_to and i_to_r_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between environment and i_NaK for
    vars time and time;
  enddef;
  def map between Membrane and i_KACh for
    vars V and V;
  enddef;
  def map between Ionic_values and i_NaK for
    vars E_Na and E_Na;
    vars Ko and Ko;
  enddef;
  def map between Membrane and i_f for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between i_Kur and Membrane for
    vars i_Kur and i_Kur;
  enddef;
  def map between i_Ks_n_gate and i_Ks for
    vars n and n;
  enddef;
  def map between Nai_concentration and Ionic_values for
    vars Nai and Nai;
  enddef;
  def map between i_NaCa and Membrane for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between i_KACh and i_KACh_a_gate for
    vars ACh and ACh;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Kr and Membrane for
    vars i_Kr and i_Kr;
  enddef;
  def map between environment and i_NaCa for
    vars time and time;
  enddef;
  def map between environment and i_Kr for
    vars time and time;
  enddef;
  def map between Ca_buffering and Ca_dynamics for
    vars delta_fTMC and delta_fTMC;
    vars delta_fCMi and delta_fCMi;
    vars delta_fCMs and delta_fCMs;
    vars CQ_tot and CQ_tot;
    vars TC_tot and TC_tot;
    vars CM_tot and CM_tot;
    vars TMC_tot and TMC_tot;
    vars delta_fCQ and delta_fCQ;
    vars delta_fTC and delta_fTC;
  enddef;
  def map between Ca_dynamics and Ca_SR_release for
    vars Ca_jsr and Ca_jsr;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_CaT and i_CaT_dT_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between Membrane and i_NaCa for
    vars RTONF and RTONF;
    vars V and V;
  enddef;
  def map between i_CaL and i_CaL_dL_gate for
    vars V and V;
    vars Iso_1_uM and Iso_1_uM;
    vars time and time;
  enddef;
  def map between i_CaT_dT_gate and i_CaT for
    vars dT and dT;
  enddef;
  def map between Membrane and i_to for
    vars V and V;
  enddef;
  def map between Ionic_values and i_KACh for
    vars E_K and E_K;
  enddef;
  def map between environment and i_Kur for
    vars time and time;
  enddef;
  def map between environment and Ca_buffering for
    vars time and time;
  enddef;
  def map between i_to and Membrane for
    vars i_to and i_to;
  enddef;
  def map between Membrane and Ca_dynamics for
    vars F and F;
  enddef;
  def map between Nai_concentration and i_Na for
    vars Nai and Nai;
  enddef;
enddef;
