<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  mlcek_model_2001_version02.xml

CREATED :  23rd May 2007

LAST MODIFIED : 23rd May 2007

AUTHOR :  Catherine Lloyd
          The Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Mlcek et al's
               mathematical model of the electromechanical heart contractile
               system.

CHANGES:  
   
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:pathway_editor="http://www.physiome.com/pathway_editor/1.0#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" pathway_editor:rendering_config_file="mlcek_model_2001_CellMLrender.xml" cmeta:id="mlcek_model_2001_version02" name="mlcek_neumann_kittnar_novak_2001_version01">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Mathematical Model of the Electromechanical Heart Contractile System</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
Computational modelling in molecular cardiology has recently focused on simulating subsets of myocardial excitation-contraction processes.  As people try to improve their understanding of myocardial function, there is an increasing interest in excitation-contraction coupling and mechanical events in cardiac muscle.  It is hoped that these computer simulations will also help explain the pathophysiological mechanisms of heart failure.
</para>

<para>
In their 2001 paper, Mlcek, Neumann, Kittnar and Novak concentrate on the molecular level of electromechanical events in cardiac muscle.  They introduce an actomyosin subsystem accompanied by a simple regulatory subsystem involving calcium binding to troponin C (see <xref linkend="fig_reaction_diagram"/> below).  They performed many simulations to prove the stability of their model and they then used the simulation results to help interpret experimental and clinical data.     
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
Mathematical Model of the Electromechanical Heart Contractile System - Regulatory Subsystem Physiological Considerations, M. Mlcek, J. Neumann, O. Kittnar and V. Novak, 2001, <emphasis>Physiological Research</emphasis>
, 50, 425-432. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11551150&amp;dopt=Abstract">PubMed ID: 11551150</ulink> 
</para>

<para>
The raw CellML descriptions of the model can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>.
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction_diagram</title>
    </objectinfo>
    <imagedata fileref="mlcek_2001.png"/>
  </imageobject>
</mediaobject>
<caption>Diagram of the regulatory subsystem scheme and the actomyosin subsystem scheme.</caption>
</informalfigure>

</sect1>
</article>
</documentation>


  
  
   
   <units name="micromolar">
     <unit units="mole" prefix="micro"/>
     <unit units="litre" exponent="-1"/>
   </units>
   
   <units name="first_order_rate_constant">
     <unit units="second" exponent="-1"/>
   </units>
   
   <units name="second_order_rate_constant">
     <unit units="micromolar" exponent="-1"/>
     <unit units="second" exponent="-1"/>
   </units>
   
 
   <component name="environment">
      <variable units="second" public_interface="out" name="time"/>
   </component>

   
   <component name="A" cmeta:id="A">
     
    <variable units="micromolar" public_interface="out" name="A"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="kTA"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kTA_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kDPA"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kDPA_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kan"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kab"/>
    <variable units="micromolar" public_interface="in" name="M_ATP"/>
    <variable units="micromolar" public_interface="in" name="A_M_ATP"/>
    <variable units="micromolar" public_interface="in" name="M_ADP_Pi"/>
    <variable units="micromolar" public_interface="in" name="A_M_ADP_Pi"/>
    <variable units="micromolar" public_interface="in" name="Cai"/> 
    <variable units="micromolar" public_interface="in" name="TnC"/>
    <variable units="dimensionless" public_interface="in" name="u"/>      
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> A </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> kTA_ </ci>
              <ci> A_M_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> kDPA_ </ci>
              <ci> A_M_ADP_Pi </ci>
            </apply>
            <apply>
              <times/>  
              <ci> u </ci>
              <ci> kan </ci>
              <ci> Cai </ci>
              <ci> TnC </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> kTA </ci>
              <ci> A </ci>
              <ci> M_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> kDPA </ci>
              <ci> A </ci>
              <ci> M_ADP_Pi </ci>
            </apply>
            <apply>
              <times/>  
              <ci> kab </ci>
              <ci> A </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
   <component name="M_ADP_Pi" cmeta:id="M_ADP_Pi">
     
    <variable units="micromolar" public_interface="out" name="M_ADP_Pi"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="kH"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kH_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kDPA"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kDPA_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kan"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kab"/>
    <variable units="micromolar" public_interface="in" name="M_ATP"/>
    <variable units="micromolar" public_interface="in" name="A"/>
    <variable units="micromolar" public_interface="in" name="A_M_ADP_Pi"/>
    <variable units="micromolar" public_interface="in" name="Cai"/> 
    <variable units="micromolar" public_interface="in" name="TnC"/>
    <variable units="dimensionless" public_interface="in" name="u"/>
    <variable units="dimensionless" public_interface="in" name="w1"/>      
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> M_ADP_Pi </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> kH </ci>
              <ci> M_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> kDPA_ </ci>
              <ci> A_M_ADP_Pi </ci>
            </apply>
            <apply>
              <times/>  
              <ci> w1 </ci>
              <ci> u </ci>
              <ci> kan </ci>
              <ci> Cai </ci>
              <ci> TnC </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> kH_ </ci>
              <ci> M_ADP_Pi </ci>
            </apply>
            <apply>
              <times/>
              <ci> kDPA </ci>
              <ci> A </ci>
              <ci> M_ADP_Pi </ci>
            </apply>
            <apply>
              <times/>  
              <ci> kab </ci>
              <ci> M_ADP_Pi </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="A_M_ADP_Pi" cmeta:id="A_M_ADP_Pi">
     
    <variable units="micromolar" public_interface="out" name="A_M_ADP_Pi"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="kAH"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kAH_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kDPA"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kDPA_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kDAP_"/>
    <variable units="micromolar" public_interface="in" name="A"/>
    <variable units="micromolar" public_interface="in" name="M_ADP_Pi"/>
    <variable units="micromolar" public_interface="in" name="A_M_ATP"/> 
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> A_M_ADP_Pi </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>  
              <ci> kAH </ci>
              <ci> A_M_ATP </ci>
            </apply>
            <apply>
              <times/>  
              <ci> kDPA_ </ci>
              <ci> A </ci>
              <ci> M_ADP_Pi </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kDPA_ </ci>
              <ci> A_M_ADP_Pi </ci>
            </apply>
            <apply>
              <times/>  
              <ci> kDAP_ </ci>
              <ci> A_M_ADP_Pi </ci>
            </apply>
            <apply>
              <times/>
              <ci> kAH_ </ci>
              <ci> A_M_ADP_Pi </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
   <component name="AM_ADP" cmeta:id="AM_ADP">
     
    <variable units="micromolar" public_interface="out" name="AM_ADP"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="kAD_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kDAP_"/>
    <variable units="micromolar" public_interface="in" name="A_M_ADP_Pi"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> AM_ADP </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>  
            <ci> kDAP_ </ci>
            <ci> A_M_ADP_Pi </ci>
          </apply>
          <apply>
            <times/>
            <ci> kAD_ </ci>
            <ci> AM_ADP </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
   <component name="AM" cmeta:id="AM">
     
    <variable units="micromolar" public_interface="out" name="AM"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="kAT"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kAT_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kAD_"/>
    <variable units="micromolar" public_interface="in" name="ATP"/>
    <variable units="micromolar" public_interface="in" name="A_M_ATP"/>
    <variable units="micromolar" public_interface="in" name="AM_ADP"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> AM </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/> 
            <apply>
              <times/>  
              <ci> kAT_ </ci>
              <ci> A_M_ATP </ci>
            </apply>
            <apply>
              <times/>  
              <ci> kAD_ </ci>
              <ci> AM_ADP </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> kAT_ </ci>
            <ci> AM </ci>
            <ci> ATP </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
   <component name="ATP" cmeta:id="ATP">
    <variable units="micromolar" public_interface="out" name="ATP"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="kAT"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kAT_"/>
    <variable units="micromolar" public_interface="in" name="AM"/>
    <variable units="micromolar" public_interface="in" name="A_M_ATP"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> ATP </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>  
            <ci> kAT_ </ci>
            <ci> A_M_ATP </ci>
          </apply>
          <apply>
            <times/>
            <ci> kAT </ci>
            <ci> AM </ci>
            <ci> ATP </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

   <component name="A_M_ATP" cmeta:id="A_M_ATP">
     
    <variable units="micromolar" public_interface="out" name="A_M_ATP"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="kTA"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kTA_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kAT"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kAT_"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kAH"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kAH_"/>
    <variable units="micromolar" public_interface="in" name="M_ATP"/>
    <variable units="micromolar" public_interface="in" name="A"/>
    <variable units="micromolar" public_interface="in" name="A_M_ADP_Pi"/>
    <variable units="micromolar" public_interface="in" name="AM"/> 
    <variable units="micromolar" public_interface="in" name="ATP"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> A_M_ATP </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> kTA </ci>
              <ci> A </ci>
              <ci> M_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> kAT </ci>
              <ci> AM </ci>
              <ci> ATP </ci>
            </apply>
            <apply>
              <times/>  
              <ci> kAH_ </ci>
              <ci> A_M_ADP_Pi </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> kTA_ </ci>
              <ci> A_M_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> kAT_ </ci>
              <ci> A_M_ATP </ci>
            </apply>
            <apply>
              <times/>  
              <ci> kAH </ci>
              <ci> A_M_ATP </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="M_ATP" cmeta:id="M_ATP">
     
    <variable units="micromolar" public_interface="out" name="M_ATP"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="kH"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kH_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kTA"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kTA_"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kan"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kab"/>
    <variable units="micromolar" public_interface="in" name="M_ADP_Pi"/>
    <variable units="micromolar" public_interface="in" name="A"/>
    <variable units="micromolar" public_interface="in" name="A_M_ATP"/>
    <variable units="micromolar" public_interface="in" name="Cai"/> 
    <variable units="micromolar" public_interface="in" name="TnC"/>
    <variable units="dimensionless" public_interface="in" name="u"/>
    <variable units="dimensionless" public_interface="in" name="w6"/>      
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> M_ATP </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> kH_ </ci>
              <ci> M_ADP_Pi </ci>
            </apply>
            <apply>
              <times/>
              <ci> kTA_ </ci>
              <ci> A_M_ATP </ci>
            </apply>
            <apply>
              <times/>  
              <ci> w6 </ci>
              <ci> u </ci>
              <ci> kan </ci>
              <ci> Cai </ci>
              <ci> TnC </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> kH </ci>
              <ci> M_ATP </ci>
            </apply>
            <apply>
              <times/>
              <ci> kTA </ci>
              <ci> A </ci>
              <ci> M_ATP </ci>
            </apply>
            <apply>
              <times/>  
              <ci> kab </ci>
              <ci> M_ATP </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
 
  <component name="TnC" cmeta:id="TnC">
     
    <variable units="micromolar" public_interface="out" name="TnC"/> 
    
    <variable units="second_order_rate_constant" public_interface="in" name="kan"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kab"/>
    <variable units="micromolar" public_interface="in" name="A"/>
    <variable units="micromolar" public_interface="in" name="Cai"/> 
    <variable units="dimensionless" public_interface="in" name="u"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> TnC </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <times/>
            <apply>
              <divide/>
              <cn cellml:units="dimensionless"> 1.0 </cn> 
              <ci> u </ci>
            </apply>
            <ci> kab </ci>
            <ci> A </ci>
          </apply>
          <apply>
            <times/>  
            <ci> kan </ci>
            <ci> Cai </ci>
            <ci> TnC </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
   <component name="Cai" cmeta:id="Cai">
     
    <variable units="micromolar" public_interface="out" name="Cai"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="kr"/>
    <variable units="second_order_rate_constant" public_interface="in" name="kan"/>
    <variable units="first_order_rate_constant" public_interface="in" name="kab"/>
    <variable units="micromolar" public_interface="in" name="A"/>
    <variable units="micromolar" public_interface="in" name="CaF"/> 
    <variable units="micromolar" public_interface="in" name="TnC"/>
    <variable units="dimensionless" public_interface="in" name="u"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> Cai </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>
              <apply>
                <divide/>
                <cn cellml:units="dimensionless"> 1.0 </cn> 
                <ci> u </ci>
              </apply>
              <ci> kab </ci>
              <ci> A </ci>
            </apply>
            <apply>
              <diff/> 
              <bvar>
                <ci>time</ci>
              </bvar> 
              <ci> CaF </ci> 
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kan </ci>
              <ci> Cai </ci>
              <ci> TnC </ci>
            </apply>
            <apply>
              <times/>  
              <ci> kr </ci>
              <ci> Cai </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component> 

  <component name="CaF" cmeta:id="CaF">
     
    <variable units="micromolar" public_interface="out" name="CaF"/> 
  </component> 

  <component name="constants">
    <variable units="second_order_rate_constant" public_interface="out" name="kTA"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kTA_"/>
    <variable units="second_order_rate_constant" public_interface="out" name="kDPA"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kDPA_"/>
    <variable units="second_order_rate_constant" public_interface="out" name="kan"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kab"/> 
    <variable units="first_order_rate_constant" public_interface="out" name="kAD_"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kTA_"/>
    <variable units="second_order_rate_constant" public_interface="out" name="kAT"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kAT_"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kAH"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kAH_"/>
    <variable units="second_order_rate_constant" public_interface="out" name="kH"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kH_"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kDAP_"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kr"/>
    <variable units="dimensionless" public_interface="out" name="u"/>
    <variable units="dimensionless" public_interface="out" name="w1"/>
    <variable units="dimensionless" public_interface="out" name="w6"/>
  </component>
 

  <connection>
      <map_components component_2="environment" component_1="A"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="M_ADP_Pi"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="A_M_ADP_Pi"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="AM_ADP"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="AM"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="ATP"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="A_M_ATP"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
 
   <connection>
      <map_components component_2="environment" component_1="M_ATP"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
  
   <connection>
      <map_components component_2="environment" component_1="TnC"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="environment" component_1="Cai"/>
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   
   <connection>
      <map_components component_2="CaF" component_1="Cai"/>
      <map_variables variable_2="CaF" variable_1="CaF"/>
   </connection>
   
   <connection>
      <map_components component_2="M_ATP" component_1="A"/>
      <map_variables variable_2="A" variable_1="A"/>
      <map_variables variable_2="M_ATP" variable_1="M_ATP"/>
   </connection>

   <connection>
      <map_components component_2="A_M_ATP" component_1="A"/>
      <map_variables variable_2="A" variable_1="A"/>
      <map_variables variable_2="A_M_ATP" variable_1="A_M_ATP"/>
   </connection>
 
   <connection>
      <map_components component_2="M_ADP_Pi" component_1="A"/>
      <map_variables variable_2="A" variable_1="A"/>
      <map_variables variable_2="M_ADP_Pi" variable_1="M_ADP_Pi"/>
   </connection>

   <connection>
      <map_components component_2="A_M_ADP_Pi" component_1="A"/>
      <map_variables variable_2="A" variable_1="A"/>
      <map_variables variable_2="A_M_ADP_Pi" variable_1="A_M_ADP_Pi"/>
   </connection>

   <connection>
      <map_components component_2="Cai" component_1="A"/>
      <map_variables variable_2="A" variable_1="A"/>
      <map_variables variable_2="Cai" variable_1="Cai"/>
   </connection>

   <connection>
      <map_components component_2="TnC" component_1="A"/>
      <map_variables variable_2="A" variable_1="A"/>
      <map_variables variable_2="TnC" variable_1="TnC"/>
   </connection>

   <connection>
      <map_components component_2="M_ADP_Pi" component_1="A_M_ADP_Pi"/>
      <map_variables variable_2="A_M_ADP_Pi" variable_1="A_M_ADP_Pi"/>
      <map_variables variable_2="M_ADP_Pi" variable_1="M_ADP_Pi"/>
   </connection>

   <connection>
      <map_components component_2="M_ADP_Pi" component_1="M_ATP"/>
      <map_variables variable_2="M_ATP" variable_1="M_ATP"/>
      <map_variables variable_2="M_ADP_Pi" variable_1="M_ADP_Pi"/>
   </connection>

   <connection>
      <map_components component_2="Cai" component_1="M_ADP_Pi"/>
      <map_variables variable_2="Cai" variable_1="Cai"/>
   </connection>

   <connection>
      <map_components component_2="TnC" component_1="M_ADP_Pi"/>
      <map_variables variable_2="TnC" variable_1="TnC"/>
   </connection>

   <connection>
      <map_components component_2="A_M_ADP_Pi" component_1="A_M_ATP"/>
      <map_variables variable_2="A_M_ATP" variable_1="A_M_ATP"/>
      <map_variables variable_2="A_M_ADP_Pi" variable_1="A_M_ADP_Pi"/>
   </connection>

   <connection>
      <map_components component_2="A_M_ADP_Pi" component_1="A_M_ADP_Pi"/>
      <map_variables variable_2="A_M_ADP_Pi" variable_1="A_M_ADP_Pi"/>
      <map_variables variable_2="A_M_ADP_Pi" variable_1="A_M_ADP_Pi"/>
   </connection>

   <connection>
      <map_components component_2="A_M_ADP_Pi" component_1="AM_ADP"/>
      <map_variables variable_2="A_M_ADP_Pi" variable_1="A_M_ADP_Pi"/>
   </connection>

   <connection>
      <map_components component_2="AM" component_1="AM_ADP"/>
      <map_variables variable_2="AM_ADP" variable_1="AM_ADP"/>
   </connection>

   <connection>
      <map_components component_2="ATP" component_1="AM"/>
      <map_variables variable_2="AM" variable_1="AM"/>
      <map_variables variable_2="ATP" variable_1="ATP"/>
   </connection>

   <connection>
      <map_components component_2="A_M_ATP" component_1="AM"/>
      <map_variables variable_2="AM" variable_1="AM"/>
      <map_variables variable_2="A_M_ATP" variable_1="A_M_ATP"/>
   </connection>

   <connection>
      <map_components component_2="A_M_ATP" component_1="ATP"/>
      <map_variables variable_2="ATP" variable_1="ATP"/>
      <map_variables variable_2="A_M_ATP" variable_1="A_M_ATP"/>
   </connection>

   <connection>
      <map_components component_2="A_M_ATP" component_1="M_ATP"/>
      <map_variables variable_2="M_ATP" variable_1="M_ATP"/>
      <map_variables variable_2="A_M_ATP" variable_1="A_M_ATP"/>
   </connection>

   <connection>
      <map_components component_2="Cai" component_1="M_ATP"/>
      <map_variables variable_2="Cai" variable_1="Cai"/>
   </connection>

   <connection>
      <map_components component_2="TnC" component_1="M_ATP"/>
      <map_variables variable_2="TnC" variable_1="TnC"/>
   </connection>

   <connection>
      <map_components component_2="TnC" component_1="Cai"/>
      <map_variables variable_2="TnC" variable_1="TnC"/>
      <map_variables variable_2="Cai" variable_1="Cai"/>
   </connection>
 
  <connection>
    <map_components component_2="constants" component_1="A"/>
    <map_variables variable_2="kTA" variable_1="kTA"/>
    <map_variables variable_2="kTA_" variable_1="kTA_"/>
    <map_variables variable_2="kDPA" variable_1="kDPA"/>
    <map_variables variable_2="kDPA_" variable_1="kDPA_"/>
    <map_variables variable_2="kan" variable_1="kan"/>
    <map_variables variable_2="kab" variable_1="kab"/>
    <map_variables variable_2="u" variable_1="u"/>
  </connection>

  <connection>
    <map_components component_2="constants" component_1="M_ADP_Pi"/>
    <map_variables variable_2="kH" variable_1="kH"/>
    <map_variables variable_2="kH_" variable_1="kH_"/>
    <map_variables variable_2="kDPA" variable_1="kDPA"/>
    <map_variables variable_2="kDPA_" variable_1="kDPA_"/>
    <map_variables variable_2="kan" variable_1="kan"/>
    <map_variables variable_2="kab" variable_1="kab"/>
    <map_variables variable_2="u" variable_1="u"/>
    <map_variables variable_2="w1" variable_1="w1"/>
  </connection>
   
  <connection>
    <map_components component_2="constants" component_1="A_M_ADP_Pi"/>
    <map_variables variable_2="kAH" variable_1="kAH"/>
    <map_variables variable_2="kAH_" variable_1="kAH_"/>
    <map_variables variable_2="kDPA" variable_1="kDPA"/>
    <map_variables variable_2="kDPA_" variable_1="kDPA_"/>
    <map_variables variable_2="kDAP_" variable_1="kDAP_"/>
  </connection>

  <connection>
    <map_components component_2="constants" component_1="AM_ADP"/>
    <map_variables variable_2="kAD_" variable_1="kAD_"/>
    <map_variables variable_2="kDAP_" variable_1="kDAP_"/>
  </connection>

  <connection>
    <map_components component_2="constants" component_1="AM"/>
    <map_variables variable_2="kAT" variable_1="kAT"/>
    <map_variables variable_2="kAT_" variable_1="kAT_"/>
    <map_variables variable_2="kAD_" variable_1="kAD_"/>
  </connection>

  <connection>
    <map_components component_2="constants" component_1="ATP"/>
    <map_variables variable_2="kAT" variable_1="kAT"/>
    <map_variables variable_2="kAT_" variable_1="kAT_"/>
  </connection>

  <connection>
    <map_components component_2="constants" component_1="A_M_ATP"/>
    <map_variables variable_2="kTA" variable_1="kTA"/>
    <map_variables variable_2="kTA_" variable_1="kTA_"/>
    <map_variables variable_2="kAT" variable_1="kAT"/>
    <map_variables variable_2="kAT_" variable_1="kAT_"/>
    <map_variables variable_2="kAH" variable_1="kAH"/>
    <map_variables variable_2="kAH_" variable_1="kAH_"/>
  </connection>

  <connection>
    <map_components component_2="constants" component_1="M_ATP"/>
    <map_variables variable_2="kH" variable_1="kH"/>
    <map_variables variable_2="kH_" variable_1="kH_"/>
    <map_variables variable_2="kTA" variable_1="kTA"/>
    <map_variables variable_2="kTA_" variable_1="kTA_"/>
    <map_variables variable_2="kan" variable_1="kan"/>
    <map_variables variable_2="kab" variable_1="kab"/>
    <map_variables variable_2="u" variable_1="u"/>
    <map_variables variable_2="w6" variable_1="w6"/>
  </connection>

  <connection>
    <map_components component_2="constants" component_1="TnC"/>
    <map_variables variable_2="kan" variable_1="kan"/>
    <map_variables variable_2="kab" variable_1="kab"/>
    <map_variables variable_2="u" variable_1="u"/>
  </connection>

  <connection>
    <map_components component_2="constants" component_1="Cai"/>
    <map_variables variable_2="kr" variable_1="kr"/>
    <map_variables variable_2="kan" variable_1="kan"/>
    <map_variables variable_2="kab" variable_1="kab"/>
    <map_variables variable_2="u" variable_1="u"/>
  </connection>


<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#da8b8824-dde1-4436-9643-1ea40cfdc1fc">
    <rdf:li>cardiac myocyte</rdf:li>
    <rdf:li>Molecular Mechanisms</rdf:li>
    <rdf:li>Cardiac Myocyte</rdf:li>
    <rdf:li>electrophysiology</rdf:li>
    <rdf:li>myofilament mechanics</rdf:li>
    <rdf:li>cardiac</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#1797b0f0-04be-4909-897b-00abd9fe5268">
    <rdf:li rdf:resource="rdf:#66a06fd7-7f8f-48c5-8a68-1e936956a74f"/>
    <rdf:li rdf:resource="rdf:#5730eb43-05cd-44f7-9d1e-1493964a8be1"/>
    <rdf:li rdf:resource="rdf:#641ff0ca-dc82-4afd-8ab3-ea2eed3c96ba"/>
    <rdf:li rdf:resource="rdf:#1c3049f2-c2d7-4260-b007-5897e30c48af"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#557275df-d446-44ef-aa9e-10bb14f96f1e">
    <dc:creator rdf:resource="rdf:#1797b0f0-04be-4909-897b-00abd9fe5268"/>
    <dc:title>Mathematical Model of the Electromechanical Heart Contractile System             - Regulatory Subsystem Physiological Considerations</dc:title>
    <bqs:volume>50</bqs:volume>
    <bqs:first_page>425</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#77bb3f31-b6d4-471f-ae58-0a2e497c7bee"/>
    <dcterms:issued rdf:resource="rdf:#3c8f6e62-50ba-4b0b-b0b6-4ac03293fd43"/>
    <bqs:last_page>432</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="/A_M_ADP_Pi">
    <dcterms:alternative>Actin-Myosin-ADP-Pi</dcterms:alternative>
    <dc:title>A_M_ADP_Pi</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="/A">
    <dcterms:alternative>Actin</dcterms:alternative>
    <dc:title>A</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#mlcek_model_2001_version02">
    <dc:title>
        Mlcek et al's 2001 mathematical model of the elctromechanical heart 
        contractile system
      </dc:title>
    <cmeta:bio_entity>Cardiac Myocyte</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#76ffd01f-dcdc-44a4-ad09-61db1016fcaa"/>
    <bqs:reference rdf:resource="rdf:#0bf0b1c0-eb66-46bf-8d6f-ad382db48a45"/>
    <bqs:reference rdf:resource="rdf:#13140a37-96a7-421b-b045-799ea2831d37"/>
    <cmeta:species>Homo sapiens</cmeta:species>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#1a0965ce-c492-4ca9-b21c-541c339a5632"/>
    <dcterms:created rdf:resource="rdf:#2b07366a-5f51-4e2e-a5ad-bf802dbdbe92"/>
    <dc:creator rdf:resource="rdf:#5227192c-ff1d-448b-b213-faa793a3929d"/>
    <cmeta:modification rdf:resource="rdf:#3b85d580-79c8-4f00-a641-700a8e782ea0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5227192c-ff1d-448b-b213-faa793a3929d">
    <vCard:ORG rdf:resource="rdf:#dce481ed-c2d2-464c-832e-928ff8d7ca14"/>
    <vCard:EMAIL rdf:resource="rdf:#d68ee28b-c537-4ab2-9335-d65894a4f979"/>
    <vCard:N rdf:resource="rdf:#f6b98ab0-1c82-4fbf-9af8-cf7730084ece"/>
  </rdf:Description>
  <rdf:Description rdf:about="/M_ADP_Pi">
    <dcterms:alternative>Myosin-ADP-Pi</dcterms:alternative>
    <dc:title>M_ADP_Pi</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e9c64324-2ede-4619-8f76-dabcb4ad4bd0">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#da8b8824-dde1-4436-9643-1ea40cfdc1fc"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#77bb3f31-b6d4-471f-ae58-0a2e497c7bee">
    <dc:title>Physiological Research</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0bf0b1c0-eb66-46bf-8d6f-ad382db48a45">
    <bqs:Pubmed_id>11551150</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#557275df-d446-44ef-aa9e-10bb14f96f1e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#13140a37-96a7-421b-b045-799ea2831d37">
    <dc:subject rdf:resource="rdf:#e9c64324-2ede-4619-8f76-dabcb4ad4bd0"/>
  </rdf:Description>
  <rdf:Description rdf:about="/TnC">
    <dcterms:alternative>Troponin C</dcterms:alternative>
    <dc:title>TnC</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#641ff0ca-dc82-4afd-8ab3-ea2eed3c96ba">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#5c29f2d7-f15a-4252-9510-bdeaeaf87541"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2b07366a-5f51-4e2e-a5ad-bf802dbdbe92">
    <dcterms:W3CDTF>2007-05-23T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5730eb43-05cd-44f7-9d1e-1493964a8be1">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#68b9e319-f4ce-47bd-b7ad-6bc3ec1d5dc4"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d68ee28b-c537-4ab2-9335-d65894a4f979">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fdcecd3c-bf08-488e-a496-89d37910729e">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#68b9e319-f4ce-47bd-b7ad-6bc3ec1d5dc4">
    <vCard:Given>J</vCard:Given>
    <vCard:Family>Neumann</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="/M_ATP">
    <dcterms:alternative>Myosin-ATP</dcterms:alternative>
    <dc:title>M_ATP</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1c3049f2-c2d7-4260-b007-5897e30c48af">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#76e83bcb-fd20-4c63-9460-339ef3b39301"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3c8f6e62-50ba-4b0b-b0b6-4ac03293fd43">
    <dcterms:W3CDTF>2001</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="/Cai">
    <dcterms:alternative>intracellular free calcium</dcterms:alternative>
    <dc:title>Cai</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0b7b5afb-abbf-4729-ba79-9d1cada54283">
    <dcterms:W3CDTF>2007-06-05T09:45:51+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1a0965ce-c492-4ca9-b21c-541c339a5632">
    <dc:creator rdf:resource="rdf:#18b83f8d-849c-424d-9f56-a2e758884cbf"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3b85d580-79c8-4f00-a641-700a8e782ea0">
    <dcterms:modified rdf:resource="rdf:#0b7b5afb-abbf-4729-ba79-9d1cada54283"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics.  This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.&#13;
&#13;
The model does not run in the PCEnv simulator because it is underconstrained.  I have contacted the authors of the original publication and I have requested the parameter values.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#9dfabbee-a643-4493-9417-8b1d78631a66"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e7959ab6-0340-4477-9c28-73df8b090e3c">
    <vCard:Given>M</vCard:Given>
    <vCard:Family>Mlcek</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9dfabbee-a643-4493-9417-8b1d78631a66">
    <vCard:N rdf:resource="rdf:#fdcecd3c-bf08-488e-a496-89d37910729e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#76e83bcb-fd20-4c63-9460-339ef3b39301">
    <vCard:Given>V</vCard:Given>
    <vCard:Family>Novak</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="/A_M_ATP">
    <dcterms:alternative>Actin-Myosin-ATP</dcterms:alternative>
    <dc:title>A_M_ATP</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="/CaF">
    <dcterms:alternative>sarcoplasmic reticulum calcium</dcterms:alternative>
    <dc:title>CaF</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="/AM_ADP">
    <dcterms:alternative>Actomyosin-ADP</dcterms:alternative>
    <dc:title>AM_ADP</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f6b98ab0-1c82-4fbf-9af8-cf7730084ece">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5c29f2d7-f15a-4252-9510-bdeaeaf87541">
    <vCard:Given>O</vCard:Given>
    <vCard:Family>Kittnar</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#76ffd01f-dcdc-44a4-ad09-61db1016fcaa">
    <dc:creator rdf:resource="rdf:#fda6c0e6-8f69-495f-8b91-c41be27b0cb5"/>
    <rdf:value>Below is a CellML description of Mlcek et al's mathematical model of &#13;
          the elctromechanical heart contractile system.&#13;
          &#13;
          Rate constants for the reactions were not specified in the original &#13;
          paper, therefore in the CellML description they have been set at a &#13;
          default value of 1.0.  Similarly, initial concentrations were not &#13;
          defined so these have been set at a default value of 1 micromolar.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="/AM">
    <dcterms:alternative>Actomyosin</dcterms:alternative>
    <dc:title>AM</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dce481ed-c2d2-464c-832e-928ff8d7ca14">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#66a06fd7-7f8f-48c5-8a68-1e936956a74f">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#e7959ab6-0340-4477-9c28-73df8b090e3c"/>
  </rdf:Description>
</rdf:RDF>
</model>
