// reference: subject_type keyword; electrophysiology
def model voigt_heijman_2013 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit cm2_per_uF as
    unit gram {mult: 100000};
    unit metre {expo: 4.0};
    unit second {expo: -4.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit cm_per_s as
    unit metre {mult: 0.01};
    unit second {expo: -1.0};
  enddef;
  def unit dimensionless_times_1e15 as
    unit dimensionless {mult: 1000000000000000};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3.0};
    unit second {expo: -1.0};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol4_per_m12 as
    unit metre {expo: -12.0};
    unit mole {expo: 4.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mM2_per_ms as
    unit metre {expo: 6.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole {expo: -2.0};
  enddef;
  def unit per_mM_per_ms as
    unit metre {expo: 3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit uA_per_cm2 as
    unit metre {expo: -2.0, mult: 0.01};
    unit ampere;
  enddef;
  def unit um as
    unit metre {mult: 1e-06};
  enddef;

  def comp buffca as
    var Bmax_CaM: mM {init: 0.024};
    var Bmax_SLhighjn: mM;
    var Bmax_SLhighsl: mM;
    var Bmax_SLlowjn: mM;
    var Bmax_SLlowsl: mM;
    var Bmax_SR: mM;
    var Bmax_TnChigh: mM {init: 0.14};
    var Bmax_TnClow: mM {init: 0.07};
    var Bmax_myosin: mM {init: 0.14};
    var CaM: mM {pub: out, init: 6.73710089221736985e-04};
    var Ca_i: mM {pub: in};
    var Ca_jn: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var J_CaB_cytosol: mM_per_ms {pub: out};
    var J_CaB_jn: mM_per_ms {pub: out};
    var J_CaB_sl: mM_per_ms {pub: out};
    var Mg_i: mM {pub: in};
    var Myoc: mM {pub: out, init: 3.79608844523014136e-03};
    var Myom: mM {pub: out, init: 1.35691489581683838e-01};
    var SLH_jn: mM {pub: out, init: 1.00754933940878755e-01};
    var SLH_sl: mM {pub: out, init: 1.86055242143676608e-01};
    var SLL_jn: mM {pub: out, init: 1.28122161143722785e-02};
    var SLL_sl: mM {pub: out, init: 2.05131045874987414e-02};
    var SRB: mM {pub: out, init: 4.31383413366585346e-03};
    var TnCHc: mM {pub: out, init: 1.27405935029765827e-01};
    var TnCHm: mM {pub: out, init: 5.91106798633337510e-03};
    var TnCL: mM {pub: out, init: 1.77305527980331397e-02};
    var Vjn: litre {pub: in};
    var Vmyo: litre {pub: in};
    var Vsl: litre {pub: in};
    var koff_cam: mS_per_uF {init: 0.238};
    var koff_myoca: mS_per_uF {init: 0.00046};
    var koff_myomg: mS_per_uF {init: 5.7e-05};
    var koff_slh: mS_per_uF {init: 0.03};
    var koff_sll: mS_per_uF {init: 1.3};
    var koff_sr: mS_per_uF {init: 0.06};
    var koff_tnchca: mS_per_uF {init: 3.2e-05};
    var koff_tnchmg: mS_per_uF {init: 0.00333};
    var koff_tncl: mS_per_uF {init: 0.0196};
    var kon_cam: per_mM_per_ms {init: 34.0};
    var kon_myoca: per_mM_per_ms {init: 13.8};
    var kon_myomg: per_mM_per_ms {init: 0.0157};
    var kon_slh: per_mM_per_ms {init: 100.0};
    var kon_sll: per_mM_per_ms {init: 100.0};
    var kon_sr: per_mM_per_ms {init: 100.0};
    var kon_tnchca: per_mM_per_ms {init: 2.37};
    var kon_tnchmg: per_mM_per_ms {init: 0.003};
    var kon_tncl: per_mM_per_ms {init: 32.7};
    var time: ms {pub: in};
    Bmax_SLhighjn = 0.00165{mM}*Vmyo/Vjn*0.1{dimensionless};
    Bmax_SLhighsl = Vmyo/Vsl*0.0134{mM};
    Bmax_SLlowjn = 0.0046{mM}*Vmyo/Vjn*0.1{dimensionless};
    Bmax_SLlowsl = Vmyo/Vsl*0.0374{mM};
    Bmax_SR = 19.0{dimensionless}*0.0009{mM};
    ode(CaM, time) = kon_cam*Ca_i*(Bmax_CaM-CaM)-koff_cam*CaM;
    J_CaB_cytosol = ode(TnCL, time)+ode(TnCHc, time)+ode(TnCHm, time)+ode(CaM, time)+ode(Myoc, time)+ode(Myom, time)+ode(SRB, time);
    J_CaB_jn = ode(SLL_jn, time)+ode(SLH_jn, time);
    J_CaB_sl = ode(SLL_sl, time)+ode(SLH_sl, time);
    ode(Myoc, time) = kon_myoca*Ca_i*(Bmax_myosin-Myoc-Myom)-koff_myoca*Myoc;
    ode(Myom, time) = kon_myomg*Mg_i*(Bmax_myosin-Myoc-Myom)-koff_myomg*Myom;
    ode(SLH_jn, time) = kon_slh*Ca_jn*(Bmax_SLhighjn-SLH_jn)-koff_slh*SLH_jn;
    ode(SLH_sl, time) = kon_slh*Ca_sl*(Bmax_SLhighsl-SLH_sl)-koff_slh*SLH_sl;
    ode(SLL_jn, time) = kon_sll*Ca_jn*(Bmax_SLlowjn-SLL_jn)-koff_sll*SLL_jn;
    ode(SLL_sl, time) = kon_sll*Ca_sl*(Bmax_SLlowsl-SLL_sl)-koff_sll*SLL_sl;
    ode(SRB, time) = kon_sr*Ca_i*(Bmax_SR-SRB)-koff_sr*SRB;
    ode(TnCHc, time) = kon_tnchca*Ca_i*(Bmax_TnChigh-TnCHc-TnCHm)-koff_tnchca*TnCHc;
    ode(TnCHm, time) = kon_tnchmg*Mg_i*(Bmax_TnChigh-TnCHc-TnCHm)-koff_tnchmg*TnCHm;
    ode(TnCL, time) = kon_tncl*Ca_i*(Bmax_TnClow-TnCL)-koff_tncl*TnCL;
  enddef;

  def comp buffna as
    var Bmax_Na_jn: mM {init: 7.561};
    var Bmax_Na_sl: mM {init: 1.65};
    var NaB_jn: mM {pub: out, init: 3.62527560419928152e+00};
    var NaB_sl: mM {pub: out, init: 7.91087217252140484e-01};
    var Na_jn: mM {pub: in};
    var Na_sl: mM {pub: in};
    var koff_na: mS_per_uF {init: 0.001};
    var kon_na: per_mM_per_ms {init: 0.0001};
    var time: ms {pub: in};
    ode(NaB_jn, time) = kon_na*Na_jn*(Bmax_Na_jn-NaB_jn)-koff_na*NaB_jn;
    ode(NaB_sl, time) = kon_na*Na_sl*(Bmax_Na_sl-NaB_sl)-koff_na*NaB_sl;
  enddef;

  def comp calcium as
    var Bmax_Csqn: mM;
    var C: farad {pub: in};
    var Ca_i: mM {pub: out, init: 2.02054825252250719e-04};
    var Ca_jn: mM {pub: out, init: 3.07333085373605341e-04};
    var Ca_sl: mM {pub: out, init: 2.23134214147860355e-04};
    var Ca_sr: mM {pub: out, init: 4.85784491491899340e-01};
    var Csqn: mM {pub: out, init: 1.11204132576763315e+00};
    var F: C_per_mol {pub: in};
    var ICaB_jn: A_per_F {pub: in};
    var ICaB_sl: A_per_F {pub: in};
    var ICaL_Ca_jn: A_per_F {pub: in};
    var ICaL_Ca_sl: A_per_F {pub: in};
    var ICa_tot_jn: A_per_F {pub: out};
    var ICa_tot_sl: A_per_F {pub: out};
    var INaCa_jn: A_per_F {pub: in};
    var INaCa_sl: A_per_F {pub: in};
    var IpCa_jn: A_per_F {pub: in};
    var IpCa_sl: A_per_F {pub: in};
    var JCa_jnsl: m3_per_s;
    var JCa_slmyo: m3_per_s;
    var J_CaB_cytosol: mM_per_ms {pub: in};
    var J_CaB_jn: mM_per_ms {pub: in};
    var J_CaB_sl: mM_per_ms {pub: in};
    var J_SRCarel: mM_per_ms {pub: in};
    var J_SRleak: mM_per_ms {pub: in};
    var J_serca: mM_per_ms {pub: in};
    var Vjn: litre {pub: in};
    var Vmyo: litre {pub: in};
    var Vsl: litre {pub: in};
    var Vsr: litre {pub: in};
    var koff_csqn: mS_per_uF {init: 65.0};
    var kon_csqn: per_mM_per_ms {init: 100.0};
    var time: ms {pub: in};
    Bmax_Csqn = Vmyo/Vsr*0.14{mM};
    ode(Ca_i, time) = -J_serca*Vsr/Vmyo-J_CaB_cytosol+JCa_slmyo/Vmyo*(Ca_sl-Ca_i);
    ode(Ca_jn, time) = -ICa_tot_jn*C/(Vjn*2.0{dimensionless}*F)+JCa_jnsl/Vjn*(Ca_sl-Ca_jn)-J_CaB_jn+J_SRCarel*Vsr/Vjn+J_SRleak*Vmyo/Vjn;
    ode(Ca_sl, time) = -ICa_tot_sl*C/(Vsl*2.0{dimensionless}*F)+JCa_jnsl/Vsl*(Ca_jn-Ca_sl)+JCa_slmyo/Vsl*(Ca_i-Ca_sl)-J_CaB_sl;
    ode(Ca_sr, time) = J_serca-(J_SRleak*Vmyo/Vsr+J_SRCarel)-ode(Csqn, time);
    ode(Csqn, time) = kon_csqn*Ca_sr*(Bmax_Csqn-Csqn)-koff_csqn*Csqn;
    ICa_tot_jn = ICaL_Ca_jn+ICaB_jn+IpCa_jn-2.0{dimensionless}*INaCa_jn;
    ICa_tot_sl = ICaL_Ca_sl+ICaB_sl+IpCa_sl-2.0{dimensionless}*INaCa_sl;
    JCa_jnsl = 1.0{m3_per_s}/1.21340000000000000e+12{dimensionless};
    JCa_slmyo = 1.0{m3_per_s}/2.68510000000000000e+11{dimensionless};
  enddef;

  def comp cell as
    var AF: dimensionless {pub: out, init: 0.0};
    var C: farad {pub: out, init: 1.381e-10};
  enddef;

  def comp engine as
    var CaM: mM {pub: in};
    var Csqn: mM {pub: in};
    var Myoc: mM {pub: in};
    var Myom: mM {pub: in};
    var NaB_jn: mM {pub: in};
    var NaB_sl: mM {pub: in};
    var SLH_jn: mM {pub: in};
    var SLH_sl: mM {pub: in};
    var SLL_jn: mM {pub: in};
    var SLL_sl: mM {pub: in};
    var SRB: mM {pub: in};
    var TnCHc: mM {pub: in};
    var TnCHm: mM {pub: in};
    var TnCL: mM {pub: in};
    var time: ms {pub: out};
  enddef;

  def comp geom as
    var Vcell: litre;
    var Vjn: litre {pub: out};
    var Vmyo: litre {pub: out};
    var Vsl: litre {pub: out};
    var Vsr: litre {pub: out};
    var cell_length: um {init: 100.0};
    var cell_radius: um {init: 10.25};
    var pi: dimensionless {init: 3.14159265358979312e+00};
    Vcell = pi*sqr(cell_radius)*cell_length*1e-15{dimensionless_times_1e15};
    Vjn = 0.0539{dimensionless}*0.01{dimensionless}*Vcell;
    Vmyo = 0.65{dimensionless}*Vcell;
    Vsl = 0.02{dimensionless}*Vcell;
    Vsr = 0.035{dimensionless}*Vcell;
  enddef;

  def comp icab as
    var ECa_jn: mV {pub: in};
    var ECa_sl: mV {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var ICaB: A_per_F;
    var ICaB_jn: A_per_F {pub: out};
    var ICaB_sl: A_per_F {pub: out};
    var V: mV {pub: in};
    var gCaB: mS_per_uF {init: 6.06430000000000033e-04};
    ICaB = ICaB_jn+ICaB_sl;
    ICaB_jn = Fjn*gCaB*(V-ECa_jn);
    ICaB_sl = Fsl*gCaB*(V-ECa_sl);
  enddef;

  def comp ical as
    var AF: dimensionless {pub: in};
    var Ca_jn: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var F: C_per_mol {pub: in};
    var FRT: per_mV {pub: in};
    var Fjn_CaL: dimensionless {pub: in};
    var Fsl_CaL: dimensionless {pub: in};
    var ICaL: A_per_F;
    var ICaL_Ca: A_per_F;
    var ICaL_Ca_jn: A_per_F {pub: out};
    var ICaL_Ca_sl: A_per_F {pub: out};
    var ICaL_K: A_per_F {pub: out};
    var ICaL_Na: A_per_F;
    var ICaL_Na_jn: A_per_F {pub: out};
    var ICaL_Na_sl: A_per_F {pub: out};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_jn: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_sl: mM {pub: in};
    var Q: dimensionless {pub: in};
    var Q10CaL: dimensionless {init: 1.8};
    var V: mV {pub: in};
    var d: mS_per_uF {init: 1.67750282273476489e-05};
    var f: mS_per_uF {init: 9.98760022198537767e-01};
    var fCaB_jn: mS_per_uF {init: 4.24066845471226944e-02};
    var fCaB_sl: mS_per_uF {init: 3.13717989771996886e-02};
    var fcaCaMSL: dimensionless {init: 0.0};
    var fcaCaj: dimensionless {init: 0.0};
    var ibarca_jn: uA_per_cm2;
    var ibarca_sl: uA_per_cm2;
    var ibark: uA_per_cm2;
    var ibarna_jn: uA_per_cm2;
    var ibarna_sl: uA_per_cm2;
    var ical_d_inf: dimensionless;
    var ical_d_tau: ms;
    var ical_f_inf: dimensionless;
    var ical_f_tau: ms;
    var pCa: cm_per_s;
    var pK: cm_per_s;
    var pNa: cm_per_s;
    var time: ms {pub: in};
    ICaL = ICaL_Ca+ICaL_Na+ICaL_K;
    ICaL_Ca = ICaL_Ca_jn+ICaL_Ca_sl;
    ICaL_Ca_jn = Fjn_CaL*ibarca_jn*d*f*(1.0{dimensionless}-fCaB_jn+fcaCaj)*pow(Q10CaL, Q)*0.45{cm2_per_uF};
    ICaL_Ca_sl = Fsl_CaL*ibarca_sl*d*f*(1.0{dimensionless}-fCaB_sl+fcaCaMSL)*pow(Q10CaL, Q)*0.45{cm2_per_uF};
    ICaL_K = ibark*d*f*(Fjn_CaL*(fcaCaj+1.0{dimensionless}-fCaB_jn)+Fsl_CaL*(fcaCaMSL+1.0{dimensionless}-fCaB_sl))*pow(Q10CaL, Q)*0.45{cm2_per_uF};
    ICaL_Na = ICaL_Na_jn+ICaL_Na_sl;
    ICaL_Na_jn = Fjn_CaL*ibarna_jn*d*f*(1.0{dimensionless}-fCaB_jn+fcaCaj)*pow(Q10CaL, Q)*0.45{cm2_per_uF};
    ICaL_Na_sl = Fsl_CaL*ibarna_sl*d*f*(1.0{dimensionless}-fCaB_sl+fcaCaMSL)*pow(Q10CaL, Q)*0.45{cm2_per_uF};
    ode(d, time) = (ical_d_inf-d)/ical_d_tau;
    ode(f, time) = (ical_f_inf-f)/ical_f_tau;
    ode(fCaB_jn, time) = (1.7{m3_per_mol}*Ca_jn*(1.0{dimensionless}-fCaB_jn)-0.0119{dimensionless}*fCaB_jn)*1.0{mS_per_uF};
    ode(fCaB_sl, time) = (1.7{m3_per_mol}*Ca_sl*(1.0{dimensionless}-fCaB_sl)-0.0119{dimensionless}*fCaB_sl)*1.0{mS_per_uF};
    ibarca_jn = pCa*4.0{dimensionless}*V*F*FRT*(0.341{dimensionless}*Ca_jn*exp(2.0{dimensionless}*V*FRT)-0.341{dimensionless}*Ca_o)/(exp(2.0{dimensionless}*V*FRT)-1.0{dimensionless});
    ibarca_sl = pCa*4.0{dimensionless}*V*F*FRT*(0.341{dimensionless}*Ca_sl*exp(2.0{dimensionless}*V*FRT)-0.341{dimensionless}*Ca_o)/(exp(2.0{dimensionless}*V*FRT)-1.0{dimensionless});
    ibark = pK*V*F*FRT*(0.75{dimensionless}*K_i*exp(V*FRT)-0.75{dimensionless}*K_o)/(exp(V*FRT)-1.0{dimensionless});
    ibarna_jn = pNa*V*F*FRT*(0.75{dimensionless}*Na_jn*exp(V*FRT)-0.75{dimensionless}*Na_o)/(exp(V*FRT)-1.0{dimensionless});
    ibarna_sl = pNa*V*F*FRT*(0.75{dimensionless}*Na_sl*exp(V*FRT)-0.75{dimensionless}*Na_o)/(exp(V*FRT)-1.0{dimensionless});
    ical_d_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+9.0{mV})/6.0{mV}));
    ical_d_tau = ical_d_inf*(1.0{dimensionless}-exp(-(V+9.0{mV})/6.0{mV}))/(0.035{per_mV_per_ms}*(V+9.0{mV}));
    ical_f_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+30.0{mV})/7.0{mV}))+0.2{dimensionless}/(1.0{dimensionless}+exp((50.0{mV}-V)/20.0{mV}));
    ical_f_tau = 1.0{dimensionless}/(0.0197{mS_per_uF}*exp(-sqr(0.0337{per_mV}*(V+25.0{mV})))+0.02{mS_per_uF});
    pCa = (1.0{dimensionless}-0.5{dimensionless}*AF)*0.00027{cm_per_s};
    pK = (1.0{dimensionless}-0.5{dimensionless}*AF)*1.35e-07{cm_per_s};
    pNa = (1.0{dimensionless}-0.5{dimensionless}*AF)*7.5e-09{cm_per_s};
  enddef;

  def comp iclb as
    var ECl: mV {pub: in};
    var IClB: A_per_F {pub: out};
    var V: mV {pub: in};
    var gClB: mS_per_uF {init: 0.009};
    IClB = gClB*(V-ECl);
  enddef;

  def comp iclca as
    var Ca_jn: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var ECl: mV {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var IClCa: A_per_F {pub: out};
    var IClCa_jn: A_per_F;
    var IClCa_sl: A_per_F;
    var KdClCa: mM {init: 0.1};
    var V: mV {pub: in};
    var gClCa: mS_per_uF {init: 0.0548};
    IClCa = IClCa_jn+IClCa_sl;
    IClCa_jn = Fjn*gClCa/(1.0{dimensionless}+KdClCa/Ca_jn)*(V-ECl);
    IClCa_sl = Fsl*gClCa/(1.0{dimensionless}+KdClCa/Ca_sl)*(V-ECl);
  enddef;

  def comp ik1 as
    var AF: dimensionless {pub: in};
    var EK: mV {pub: in};
    var IK1: A_per_F {pub: out};
    var IK1_Fact: dimensionless {init: 2.1};
    var K_o: mM {pub: in};
    var Na_observed: mM;
    var Na_sl: mM {pub: in};
    var V: mV {pub: in};
    var a_fact: dimensionless;
    var gK1: mS_per_uF;
    var ik1_inf_a: mS_per_uF;
    var ik1_inf_b: mS_per_uF;
    var inf: dimensionless;
    IK1 = IK1_Fact*gK1*inf*(V-EK);
    Na_observed = Na_sl;
    a_fact = 0.1{dimensionless}+0.9{dimensionless}/(1.0{dimensionless}+sqr(Na_observed/7.0{mM}));
    gK1 = (1.0{dimensionless}+AF)*sqrt(K_o/5.4{mM})*0.0525{mS_per_uF};
    ik1_inf_a = a_fact*1.0{mS_per_uF}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V-EK-59.215{mV})));
    ik1_inf_b = 1.0{mS_per_uF}*((0.49124{dimensionless}*exp(0.08032{per_mV}*(V-EK+5.476{mV}))+exp(0.06175{per_mV}*(V-EK-594.31{mV})))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V-EK+4.753{mV}))));
    inf = ik1_inf_a/(ik1_inf_a+ik1_inf_b);
  enddef;

  def comp ikach as
    var AF: dimensionless {pub: in};
    var Act: dimensionless;
    var CCh: dimensionless {init: 0.0};
    var Constitutive_Frac: dimensionless {init: 0.0};
    var EK: mV {pub: in};
    var IKACh: A_per_F {pub: out};
    var K_o: mM {pub: in};
    var Na_dep: dimensionless;
    var Na_observed: mM;
    var Na_sl: mM {pub: in};
    var V: mV {pub: in};
    var gKACh: mS_per_uF;
    Act = Constitutive_Frac+(1.0{dimensionless}-Constitutive_Frac)*CCh/(CCh+0.125{dimensionless});
    IKACh = gKACh*Na_dep*Act*(0.055{dimensionless}+0.4{dimensionless}/(1.0{dimensionless}+exp((V-EK+9.53{mV})/17.18{mV})))*(V-EK)*sqrt(K_o/5.4{mM});
    Na_dep = sel
      case AF < 1.0{dimensionless}:
        1.0{dimensionless}+1.5{dimensionless}/(1.0{dimensionless}+pow(9.0{mM}/Na_observed, 4.0{dimensionless}));
      otherwise:
        1.0{dimensionless};
    endsel;
    Na_observed = Na_sl;
    gKACh = 0.1{mS_per_uF}-0.05{mS_per_uF}*AF;
  enddef;

  def comp ikp as
    var EK: mV {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var IKp: A_per_F {pub: out};
    var IKp_jn: A_per_F;
    var IKp_sl: A_per_F;
    var V: mV {pub: in};
    var gKp: mS_per_uF {init: 0.002};
    var kp: dimensionless;
    IKp = IKp_jn+IKp_sl;
    IKp_jn = Fjn*gKp*kp*(V-EK);
    IKp_sl = Fsl*gKp*kp*(V-EK);
    kp = 1.0{dimensionless}/(1.0{dimensionless}+exp(7.488{dimensionless}-V/5.98{mV}));
  enddef;

  def comp ikr as
    var EK: mV {pub: in};
    var IKr: A_per_F {pub: out};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var gKr: mS_per_uF;
    var ikr_x_inf: dimensionless;
    var ikr_x_tau: ms;
    var r: dimensionless;
    var time: ms {pub: in};
    var x: mS_per_uF {init: 4.42405976310802831e-03};
    IKr = gKr*x*r*(V-EK);
    gKr = 0.035{mS_per_uF}*sqrt(K_o/5.4{mM});
    ikr_x_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+10.0{mV})/5.0{mV}));
    ikr_x_tau = +550.0{ms}/(1.0{dimensionless}+exp((-22.0{mV}-V)/9.0{mV}))*6.0{dimensionless}/(1.0{dimensionless}+exp((V+11.0{mV})/9.0{mV}))+230.0{ms}/(1.0{dimensionless}+exp((V+40.0{mV})/20.0{mV}));
    r = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+74.0{mV})/24.0{mV}));
    ode(x, time) = (ikr_x_inf-x)/ikr_x_tau;
  enddef;

  def comp iks as
    var AF: dimensionless {pub: in};
    var EKs: mV;
    var FRT: per_mV {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var IKs: A_per_F {pub: out};
    var IKs_jn: A_per_F;
    var IKs_sl: A_per_F;
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var V: mV {pub: in};
    var gKs_jn: mS_per_uF;
    var gKs_sl: mS_per_uF;
    var iks_x_inf: dimensionless;
    var iks_x_tau: ms;
    var pNaK: dimensionless {init: 0.01833};
    var time: ms {pub: in};
    var x: mS_per_uF {init: 6.73017121702351208e-03};
    EKs = 1.0{dimensionless}/FRT*ln((K_o+pNaK*Na_o)/(K_i+pNaK*Na_i));
    IKs = IKs_jn+IKs_sl;
    IKs_jn = Fjn*gKs_jn*sqr(x)*(V-EKs);
    IKs_sl = Fsl*gKs_sl*sqr(x)*(V-EKs);
    gKs_jn = (1.0{dimensionless}+AF)*0.0035{mS_per_uF};
    gKs_sl = (1.0{dimensionless}+AF)*0.0035{mS_per_uF};
    iks_x_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+3.8{mV})/14.25{mV}));
    iks_x_tau = 990.1{ms}/(1.0{dimensionless}+exp(-(V+2.436{mV})/14.12{mV}));
    ode(x, time) = (iks_x_inf-x)/iks_x_tau;
  enddef;

  def comp ikur as
    var AF: dimensionless {pub: in};
    var EK: mV {pub: in};
    var IKur: A_per_F {pub: out};
    var V: mV {pub: in};
    var gKur: mS_per_uF;
    var ikur_r_inf: dimensionless;
    var ikur_r_tau: ms;
    var ikur_s_inf: dimensionless;
    var ikur_s_tau: ms;
    var r: mS_per_uF {init: 3.28872423495696863e-04};
    var s: mS_per_uF {init: 9.62950458643225149e-01};
    var time: ms {pub: in};
    IKur = gKur*r*s*(V-EK);
    gKur = (1.0{dimensionless}-0.5{dimensionless}*AF)*0.045{mS_per_uF};
    ikur_r_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+6.0{mV})/(-8.6{mV})));
    ikur_r_tau = 9.0{ms}/(1.0{dimensionless}+exp((V+5.0{mV})/12.0{mV}))+0.5{ms};
    ikur_s_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+7.5{mV})/10.0{mV}));
    ikur_s_tau = 590.0{ms}/(1.0{dimensionless}+exp((V+60.0{mV})/10.0{mV}))+3050.0{ms};
    ode(r, time) = (ikur_r_inf-r)/ikur_r_tau;
    ode(s, time) = (ikur_s_inf-s)/ikur_s_tau;
  enddef;

  def comp ina as
    var ENa_jn: mV {pub: in};
    var ENa_sl: mV {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var INa: A_per_F;
    var INa_jn: A_per_F {pub: out};
    var INa_sl: A_per_F {pub: out};
    var V: mV {pub: in};
    var gNa: mS_per_uF {init: 23.0};
    var h: mS_per_uF {init: 8.70955463748630310e-01};
    var ina_h_alpha: mS_per_uF;
    var ina_h_beta: mS_per_uF;
    var ina_h_inf: dimensionless;
    var ina_h_tau: ms;
    var ina_j_alpha: mS_per_uF;
    var ina_j_beta: mS_per_uF;
    var ina_j_inf: dimensionless;
    var ina_j_tau: ms;
    var ina_m_alpha: mS_per_uF;
    var ina_m_beta: mS_per_uF;
    var ina_m_inf: dimensionless;
    var ina_m_tau: ms;
    var j: mS_per_uF {init: 8.92501441492474679e-01};
    var m: mS_per_uF {init: 7.97426794491632243e-03};
    var time: ms {pub: in};
    INa = INa_jn+INa_sl;
    INa_jn = Fjn*gNa*pow(m, 3.0{dimensionless})*h*j*(V-ENa_jn);
    INa_sl = Fsl*gNa*pow(m, 3.0{dimensionless})*h*j*(V-ENa_sl);
    ode(h, time) = (ina_h_inf-h)/ina_h_tau;
    ina_h_alpha = sel
      case V < -40.0{mV}:
        0.135{mS_per_uF}*exp((V+80.0{mV})/(-6.8{mV}));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    ina_h_beta = sel
      case V < -40.0{mV}:
        3.56{mS_per_uF}*exp(0.079{per_mV}*V)+310000.0{mS_per_uF}*exp(0.35{per_mV}*V);
      otherwise:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
    endsel;
    ina_h_inf = ina_h_alpha/(ina_h_alpha+ina_h_beta);
    ina_h_tau = 1.0{dimensionless}/(ina_h_alpha+ina_h_beta);
    ina_j_alpha = sel
      case V < -40.0{mV}:
        (-127140.0{per_mV_per_ms}*exp(0.2444{per_mV}*V)-3.474e-05{per_mV_per_ms}*exp(-0.04391{per_mV}*V))*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
      otherwise:
        0.0{mS_per_uF};
    endsel;
    ina_j_beta = sel
      case V < -40.0{mV}:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*V)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*V)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV})));
    endsel;
    ina_j_inf = ina_j_alpha/(ina_j_alpha+ina_j_beta);
    ina_j_tau = 1.0{dimensionless}/(ina_j_alpha+ina_j_beta);
    ina_m_alpha = sel
      case V == -47.13{mV}:
        3.2{mS_per_uF};
      otherwise:
        0.32{per_mV_per_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    endsel;
    ina_m_beta = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    ina_m_inf = ina_m_alpha/(ina_m_alpha+ina_m_beta);
    ina_m_tau = 1.0{dimensionless}/(ina_m_alpha+ina_m_beta);
    ode(j, time) = (ina_j_inf-j)/ina_j_tau;
    ode(m, time) = (ina_m_inf-m)/ina_m_tau;
  enddef;

  def comp inab as
    var ENa_jn: mV {pub: in};
    var ENa_sl: mV {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var INaB: A_per_F;
    var INaB_jn: A_per_F {pub: out};
    var INaB_sl: A_per_F {pub: out};
    var V: mV {pub: in};
    var gNaB: mS_per_uF {init: 0.000597};
    INaB = INaB_jn+INaB_sl;
    INaB_jn = Fjn*gNaB*(V-ENa_jn);
    INaB_sl = Fsl*gNaB*(V-ENa_sl);
  enddef;

  def comp inaca as
    var AF: dimensionless {pub: in};
    var Ca_jn: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var FRT: per_mV {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var INaCa: A_per_F;
    var INaCa_jn: A_per_F {pub: out};
    var INaCa_sl: A_per_F {pub: out};
    var IbarNCX: A_per_F;
    var Ka_jn: dimensionless;
    var Ka_sl: dimensionless;
    var Kdact: mM {init: 0.000384};
    var KmCai: mM {init: 0.00359};
    var KmCao: mM {init: 1.3};
    var KmNai: mM {init: 12.29};
    var KmNao: mM {init: 87.5};
    var Na_jn: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_sl: mM {pub: in};
    var Q: dimensionless {pub: in};
    var Q10NCX: dimensionless {init: 1.57};
    var V: mV {pub: in};
    var inaca_INaCa_jn_s1: mol4_per_m12;
    var inaca_INaCa_jn_s2: mol4_per_m12;
    var inaca_INaCa_jn_s3: mol4_per_m12;
    var inaca_INaCa_sl_s1: mol4_per_m12;
    var inaca_INaCa_sl_s2: mol4_per_m12;
    var inaca_INaCa_sl_s3: mol4_per_m12;
    var ksat: dimensionless {init: 0.27};
    var nu: dimensionless {init: 0.35};
    INaCa = INaCa_jn+INaCa_sl;
    INaCa_jn = Fjn*IbarNCX*pow(Q10NCX, Q)*Ka_jn*(inaca_INaCa_jn_s1-inaca_INaCa_jn_s2)/inaca_INaCa_jn_s3/(1.0{dimensionless}+ksat*exp((nu-1.0{dimensionless})*V*FRT));
    INaCa_sl = Fsl*IbarNCX*pow(Q10NCX, Q)*Ka_sl*(inaca_INaCa_sl_s1-inaca_INaCa_sl_s2)/inaca_INaCa_sl_s3/(1.0{dimensionless}+ksat*exp((nu-1.0{dimensionless})*V*FRT));
    IbarNCX = (1.0{dimensionless}+0.4{dimensionless}*AF)*3.15{A_per_F};
    Ka_jn = 1.0{dimensionless}/(1.0{dimensionless}+sqr(Kdact/Ca_jn));
    Ka_sl = 1.0{dimensionless}/(1.0{dimensionless}+sqr(Kdact/Ca_sl));
    inaca_INaCa_jn_s1 = exp(nu*V*FRT)*pow(Na_jn, 3.0{dimensionless})*Ca_o;
    inaca_INaCa_jn_s2 = exp((nu-1.0{dimensionless})*V*FRT)*pow(Na_o, 3.0{dimensionless})*Ca_jn;
    inaca_INaCa_jn_s3 = KmCai*pow(Na_o, 3.0{dimensionless})*(1.0{dimensionless}+pow(Na_jn/KmNai, 3.0{dimensionless}))+pow(KmNao, 3.0{dimensionless})*Ca_jn*(1.0{dimensionless}+Ca_jn/KmCai)+KmCao*pow(Na_jn, 3.0{dimensionless})+pow(Na_jn, 3.0{dimensionless})*Ca_o+pow(Na_o, 3.0{dimensionless})*Ca_jn;
    inaca_INaCa_sl_s1 = exp(nu*V*FRT)*pow(Na_sl, 3.0{dimensionless})*Ca_o;
    inaca_INaCa_sl_s2 = exp((nu-1.0{dimensionless})*V*FRT)*pow(Na_o, 3.0{dimensionless})*Ca_sl;
    inaca_INaCa_sl_s3 = KmCai*pow(Na_o, 3.0{dimensionless})*(1.0{dimensionless}+pow(Na_sl/KmNai, 3.0{dimensionless}))+pow(KmNao, 3.0{dimensionless})*Ca_sl*(1.0{dimensionless}+Ca_sl/KmCai)+KmCao*pow(Na_sl, 3.0{dimensionless})+pow(Na_sl, 3.0{dimensionless})*Ca_o+pow(Na_o, 3.0{dimensionless})*Ca_sl;
  enddef;

  def comp inak as
    var FRT: per_mV {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var INaK: A_per_F {pub: out};
    var INaK_jn: A_per_F {pub: out};
    var INaK_sl: A_per_F {pub: out};
    var IbarNaK: A_per_F {init: 1.26};
    var K_o: mM {pub: in};
    var KmKo: mM {init: 1.5};
    var KmNaip: mM {init: 11.0};
    var Na_jn: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_sl: mM {pub: in};
    var V: mV {pub: in};
    var fnak: dimensionless;
    var sigma: dimensionless;
    INaK = INaK_jn+INaK_sl;
    INaK_jn = Fjn*IbarNaK*fnak*K_o/(1.0{dimensionless}+pow(KmNaip/Na_jn, 4.0{dimensionless}))/(K_o+KmKo);
    INaK_sl = Fsl*IbarNaK*fnak*K_o/(1.0{dimensionless}+pow(KmNaip/Na_sl, 4.0{dimensionless}))/(K_o+KmKo);
    fnak = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FRT)+0.0365{dimensionless}*sigma*exp(-V*FRT));
    sigma = (exp(Na_o/67.3{mM})-1.0{dimensionless})/7.0{dimensionless};
  enddef;

  def comp inal as
    var AF: dimensionless {pub: in};
    var ENa_jn: mV {pub: in};
    var ENa_sl: mV {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var INaL: A_per_F;
    var INaL_jn: A_per_F {pub: out};
    var INaL_sl: A_per_F {pub: out};
    var V: mV {pub: in};
    var gNaL: mS_per_uF;
    var hl: mS_per_uF {init: 5.18117114324953484e-02};
    var inal_hl_inf: dimensionless;
    var inal_hl_tau: ms {init: 600.0};
    var inal_ml_a: mS_per_uF;
    var inal_ml_b: mS_per_uF;
    var ml: mS_per_uF {init: 7.97426794490581868e-03};
    var time: ms {pub: in};
    INaL = INaL_jn+INaL_sl;
    INaL_jn = Fjn*gNaL*pow(ml, 3.0{dimensionless})*hl*(V-ENa_jn);
    INaL_sl = Fsl*gNaL*pow(ml, 3.0{dimensionless})*hl*(V-ENa_sl);
    gNaL = 0.0025{mS_per_uF}*AF;
    ode(hl, time) = (inal_hl_inf-hl)/inal_hl_tau;
    inal_hl_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+91.0{mV})/6.1{mV}));
    inal_ml_a = 0.32{per_mV_per_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    inal_ml_b = 0.08{mS_per_uF}*exp(-V/11.0{mV});
    ode(ml, time) = inal_ml_a*(1.0{dimensionless}-ml)-inal_ml_b*ml;
  enddef;

  def comp ion as
    var Ca_o: mM {pub: out, init: 1.8};
    var Cl_i: mM {pub: out, init: 15.0};
    var Cl_o: mM {pub: out, init: 150.0};
    var K_o: mM {pub: out, init: 5.4};
    var Mg_i: mM {pub: out, init: 1.0};
    var Na_o: mM {pub: out, init: 140.0};
  enddef;

  def comp ipca as
    var Ca_jn: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var Fjn: dimensionless {pub: in};
    var Fsl: dimensionless {pub: in};
    var IbarSLCaP: A_per_F {init: 0.0471};
    var IpCa: A_per_F;
    var IpCa_jn: A_per_F {pub: out};
    var IpCa_sl: A_per_F {pub: out};
    var KmPCa: mM {init: 0.0005};
    var Q: dimensionless {pub: in};
    var Q10SLCaP: dimensionless {init: 2.35};
    var b: dimensionless;
    var ipca_IpCa_jn_a: dimensionless;
    var ipca_IpCa_sl_a: dimensionless;
    IpCa = IpCa_jn+IpCa_sl;
    IpCa_jn = Fjn*pow(Q10SLCaP, Q)*IbarSLCaP*ipca_IpCa_jn_a/(ipca_IpCa_jn_a+b);
    IpCa_sl = Fsl*pow(Q10SLCaP, Q)*IbarSLCaP*ipca_IpCa_sl_a/(ipca_IpCa_sl_a+b);
    b = pow(KmPCa*1.0{m3_per_mol}, 1.6{dimensionless});
    ipca_IpCa_jn_a = pow(Ca_jn*1.0{m3_per_mol}, 1.6{dimensionless});
    ipca_IpCa_sl_a = pow(Ca_sl*1.0{m3_per_mol}, 1.6{dimensionless});
  enddef;

  def comp ito as
    var AF: dimensionless {pub: in};
    var EK: mV {pub: in};
    var Ito: A_per_F {pub: out};
    var V: mV {pub: in};
    var gto: mS_per_uF;
    var ito_x_inf: dimensionless;
    var ito_x_tau: ms;
    var ito_y_inf: dimensionless;
    var ito_y_tau: ms;
    var time: ms {pub: in};
    var x: mS_per_uF {init: 1.19930453889315167e-03};
    var y: mS_per_uF {init: 9.52396284498915668e-01};
    Ito = gto*x*y*(V-EK);
    gto = (1.0{dimensionless}-0.7{dimensionless}*AF)*0.165{mS_per_uF};
    ito_x_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+1.0{mV})/11.0{mV}));
    ito_x_tau = 3.5{ms}*exp(-sqr(V/30.0{mV}))+1.5{ms};
    ito_y_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+40.5{mV})/11.5{mV}));
    ito_y_tau = 25.635{ms}*exp(-sqr((V+52.45{mV})/15.8827{mV}))+24.14{ms};
    ode(x, time) = (ito_x_inf-x)/ito_x_tau;
    ode(y, time) = (ito_y_inf-y)/ito_y_tau;
  enddef;

  def comp junc as
    var Fjn: dimensionless {pub: out, init: 0.11};
    var Fjn_CaL: dimensionless {pub: out, init: 0.9};
    var Fsl: dimensionless {pub: out};
    var Fsl_CaL: dimensionless {pub: out};
    Fsl = 1.0{dimensionless}-Fjn;
    Fsl_CaL = 1.0{dimensionless}-Fjn_CaL;
  enddef;

  def comp membrane as
    var ICa_tot: A_per_F;
    var ICa_tot_jn: A_per_F {pub: in};
    var ICa_tot_sl: A_per_F {pub: in};
    var IClB: A_per_F {pub: in};
    var IClCa: A_per_F {pub: in};
    var ICl_tot: A_per_F;
    var IK_tot: A_per_F {pub: in};
    var INa_tot: A_per_F;
    var INa_tot_jn: A_per_F {pub: in};
    var INa_tot_sl: A_per_F {pub: in};
    var I_stim: A_per_F {pub: in};
    var I_tot: A_per_F;
    var V: mV {pub: out, init: -7.49738877185916408e+01};
    var time: ms {pub: in};
    ICa_tot = ICa_tot_jn+ICa_tot_sl;
    ICl_tot = IClCa+IClB;
    INa_tot = INa_tot_jn+INa_tot_sl;
    I_tot = INa_tot+ICl_tot+ICa_tot+IK_tot;
    ode(V, time) = -(I_tot+I_stim);
  enddef;

  def comp nernst as
    var Ca_jn: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_sl: mM {pub: in};
    var Cl_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var ECa_jn: mV {pub: out};
    var ECa_sl: mV {pub: out};
    var ECl: mV {pub: out};
    var EK: mV {pub: out};
    var ENa_jn: mV {pub: out};
    var ENa_sl: mV {pub: out};
    var FRT: per_mV {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_jn: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_sl: mM {pub: in};
    ECa_jn = 1.0{dimensionless}/FRT/2.0{dimensionless}*ln(Ca_o/Ca_jn);
    ECa_sl = 1.0{dimensionless}/FRT/2.0{dimensionless}*ln(Ca_o/Ca_sl);
    ECl = 1.0{dimensionless}/FRT*ln(Cl_i/Cl_o);
    EK = 1.0{dimensionless}/FRT*ln(K_o/K_i);
    ENa_jn = 1.0{dimensionless}/FRT*ln(Na_o/Na_jn);
    ENa_sl = 1.0{dimensionless}/FRT*ln(Na_o/Na_sl);
  enddef;

  def comp phys as
    var F: C_per_mol {pub: out, init: 96485.0};
    var FRT: per_mV {pub: out};
    var Q: dimensionless {pub: out};
    var R: mJ_per_mol_per_K {init: 8314.0};
    var T: kelvin {init: 310.0};
    FRT = F/R/T;
    Q = (T-310.0{kelvin})/10.0{kelvin};
  enddef;

  def comp potassium as
    var ICaL_K: A_per_F {pub: in};
    var IK1: A_per_F {pub: in};
    var IKACh: A_per_F {pub: in};
    var IK_tot: A_per_F {pub: out};
    var IKp: A_per_F {pub: in};
    var IKr: A_per_F {pub: in};
    var IKs: A_per_F {pub: in};
    var IKur: A_per_F {pub: in};
    var INaK: A_per_F {pub: in};
    var Ito: A_per_F {pub: in};
    var K_i: mM {pub: out, init: 120.0};
    var time: ms {pub: in};
    IK_tot = Ito+IKr+IKs+IK1-2.0{dimensionless}*INaK+ICaL_K+IKp+IKur+IKACh;
    ode(K_i, time) = 0.0{mM_per_ms};
  enddef;

  def comp ryr as
    var AF: dimensionless {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_jn: mM {pub: in};
    var Ca_sr: mM {pub: in};
    var J_SRCarel: mM_per_ms {pub: out};
    var J_SRleak: mM_per_ms {pub: out};
    var J_serca: mM_per_ms {pub: out};
    var Kmf: mM;
    var Kmr: mM {init: 1.7};
    var MaxSR: dimensionless {init: 15.0};
    var MinSR: dimensionless {init: 1.0};
    var Q: dimensionless {pub: in};
    var Q10SRCaP: dimensionless {init: 2.6};
    var RI: dimensionless;
    var Vmax_SRCaP: mM_per_ms {init: 0.0053114};
    var ec50SR: mM {init: 0.45};
    var hillSRCaP: dimensionless {init: 1.787};
    var i: mS_per_uF {init: 4.16351235655844508e-07};
    var kCaSR: dimensionless;
    var kiCa: per_mM_per_ms {init: 0.5};
    var kiSRCa: per_mM_per_ms;
    var kim: mS_per_uF {init: 0.005};
    var koCa: per_mM2_per_ms;
    var koSRCa: per_mM2_per_ms;
    var kom: mS_per_uF {init: 0.06};
    var ks: mS_per_uF {init: 25.0};
    var o: mS_per_uF {init: 1.73377710603823675e-06};
    var r: mS_per_uF {init: 8.06359263514647706e-01};
    var time: ms {pub: in};
    J_SRCarel = ks*o*(Ca_sr-Ca_jn);
    J_SRleak = (1.0{dimensionless}+0.25{dimensionless}*AF)*(Ca_sr-Ca_jn)*5.348e-06{mS_per_uF};
    J_serca = pow(Q10SRCaP, Q)*Vmax_SRCaP*(pow(Ca_i/Kmf, hillSRCaP)-pow(Ca_sr/Kmr, hillSRCaP))/(1.0{dimensionless}+pow(Ca_i/Kmf, hillSRCaP)+pow(Ca_sr/Kmr, hillSRCaP));
    Kmf = 2.5{dimensionless}*0.000246{mM};
    RI = 1.0{dimensionless}-r-o-i;
    ode(i, time) = kiSRCa*Ca_jn*o-kim*i-(kom*i-koSRCa*sqr(Ca_jn)*RI);
    kCaSR = MaxSR-(MaxSR-MinSR)/(1.0{dimensionless}+pow(ec50SR/Ca_sr, 2.5{dimensionless}));
    kiSRCa = kiCa*kCaSR;
    koCa = (10.0{dimensionless}+20.0{dimensionless}*AF)*1.0{per_mM2_per_ms};
    koSRCa = koCa/kCaSR;
    ode(o, time) = koSRCa*sqr(Ca_jn)*r-kom*o-(kiSRCa*Ca_jn*o-kim*i);
    ode(r, time) = kim*RI-kiSRCa*Ca_jn*r-(koSRCa*sqr(Ca_jn)*r-kom*o);
  enddef;

  def comp sodium as
    var C: farad {pub: in};
    var F: C_per_mol {pub: in};
    var ICaL_Na_jn: A_per_F {pub: in};
    var ICaL_Na_sl: A_per_F {pub: in};
    var INaB_jn: A_per_F {pub: in};
    var INaB_sl: A_per_F {pub: in};
    var INaCa_jn: A_per_F {pub: in};
    var INaCa_sl: A_per_F {pub: in};
    var INaK_jn: A_per_F {pub: in};
    var INaK_sl: A_per_F {pub: in};
    var INaL_jn: A_per_F {pub: in};
    var INaL_sl: A_per_F {pub: in};
    var INa_jn: A_per_F {pub: in};
    var INa_sl: A_per_F {pub: in};
    var INa_tot_jn: A_per_F {pub: out};
    var INa_tot_sl: A_per_F {pub: out};
    var JNa_jnsl: m3_per_s;
    var JNa_slmyo: m3_per_s;
    var NaB_jn: mM {pub: in};
    var NaB_sl: mM {pub: in};
    var Na_i: mM {pub: out, init: 9.20582356442186978e+00};
    var Na_jn: mM {pub: out, init: 9.20484970072274145e+00};
    var Na_sl: mM {pub: out, init: 9.20559631626608166e+00};
    var Vjn: litre {pub: in};
    var Vmyo: litre {pub: in};
    var Vsl: litre {pub: in};
    var time: ms {pub: in};
    INa_tot_jn = INa_jn+INaB_jn+3.0{dimensionless}*INaCa_jn+3.0{dimensionless}*INaK_jn+ICaL_Na_jn+INaL_jn;
    INa_tot_sl = INa_sl+INaB_sl+3.0{dimensionless}*INaCa_sl+3.0{dimensionless}*INaK_sl+ICaL_Na_sl+INaL_sl;
    JNa_jnsl = 1.0{m3_per_s}/(1.63820000000000000e+12{dimensionless}/3.0{dimensionless}*100.0{dimensionless});
    JNa_slmyo = 1.0{m3_per_s}/(1.83080000000000000e+10{dimensionless}/3.0{dimensionless}*100.0{dimensionless});
    ode(Na_i, time) = JNa_slmyo/Vmyo*(Na_sl-Na_i);
    ode(Na_jn, time) = -INa_tot_jn*C/(Vjn*F)+JNa_jnsl/Vjn*(Na_sl-Na_jn)-ode(NaB_jn, time);
    ode(Na_sl, time) = -INa_tot_sl*C/(Vsl*F)+JNa_jnsl/Vsl*(Na_jn-Na_sl)+JNa_slmyo/Vsl*(Na_i-Na_sl)-ode(NaB_sl, time);
  enddef;

  def comp stimulus as
    var I_stim: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var amplitude: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: ms {init: 0.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: ms {init: 50.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: ms {init: 1000.0};
    var time: ms {pub: in};
    I_stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*amplitude;
    amplitude = -90.0{A_per_F};
  enddef;
  def map between buffca and calcium for
    vars Ca_i and Ca_i;
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
    vars J_CaB_cytosol and J_CaB_cytosol;
    vars J_CaB_jn and J_CaB_jn;
    vars J_CaB_sl and J_CaB_sl;
  enddef;
  def map between buffca and engine for
    vars CaM and CaM;
    vars Myoc and Myoc;
    vars Myom and Myom;
    vars SLH_jn and SLH_jn;
    vars SLH_sl and SLH_sl;
    vars SLL_jn and SLL_jn;
    vars SLL_sl and SLL_sl;
    vars SRB and SRB;
    vars TnCHc and TnCHc;
    vars TnCHm and TnCHm;
    vars TnCL and TnCL;
    vars time and time;
  enddef;
  def map between buffca and geom for
    vars Vjn and Vjn;
    vars Vmyo and Vmyo;
    vars Vsl and Vsl;
  enddef;
  def map between buffca and ion for
    vars Mg_i and Mg_i;
  enddef;
  def map between buffna and engine for
    vars NaB_jn and NaB_jn;
    vars NaB_sl and NaB_sl;
    vars time and time;
  enddef;
  def map between buffna and sodium for
    vars NaB_jn and NaB_jn;
    vars NaB_sl and NaB_sl;
    vars Na_jn and Na_jn;
    vars Na_sl and Na_sl;
  enddef;
  def map between calcium and cell for
    vars C and C;
  enddef;
  def map between calcium and engine for
    vars Csqn and Csqn;
    vars time and time;
  enddef;
  def map between calcium and geom for
    vars Vjn and Vjn;
    vars Vmyo and Vmyo;
    vars Vsl and Vsl;
    vars Vsr and Vsr;
  enddef;
  def map between calcium and icab for
    vars ICaB_jn and ICaB_jn;
    vars ICaB_sl and ICaB_sl;
  enddef;
  def map between calcium and ical for
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
    vars ICaL_Ca_jn and ICaL_Ca_jn;
    vars ICaL_Ca_sl and ICaL_Ca_sl;
  enddef;
  def map between calcium and iclca for
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
  enddef;
  def map between calcium and inaca for
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
    vars INaCa_jn and INaCa_jn;
    vars INaCa_sl and INaCa_sl;
  enddef;
  def map between calcium and ipca for
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
    vars IpCa_jn and IpCa_jn;
    vars IpCa_sl and IpCa_sl;
  enddef;
  def map between calcium and membrane for
    vars ICa_tot_jn and ICa_tot_jn;
    vars ICa_tot_sl and ICa_tot_sl;
  enddef;
  def map between calcium and nernst for
    vars Ca_jn and Ca_jn;
    vars Ca_sl and Ca_sl;
  enddef;
  def map between calcium and phys for
    vars F and F;
  enddef;
  def map between calcium and ryr for
    vars Ca_i and Ca_i;
    vars Ca_jn and Ca_jn;
    vars Ca_sr and Ca_sr;
    vars J_SRCarel and J_SRCarel;
    vars J_SRleak and J_SRleak;
    vars J_serca and J_serca;
  enddef;
  def map between cell and ical for
    vars AF and AF;
  enddef;
  def map between cell and ik1 for
    vars AF and AF;
  enddef;
  def map between cell and ikach for
    vars AF and AF;
  enddef;
  def map between cell and iks for
    vars AF and AF;
  enddef;
  def map between cell and ikur for
    vars AF and AF;
  enddef;
  def map between cell and inaca for
    vars AF and AF;
  enddef;
  def map between cell and inal for
    vars AF and AF;
  enddef;
  def map between cell and ito for
    vars AF and AF;
  enddef;
  def map between cell and ryr for
    vars AF and AF;
  enddef;
  def map between cell and sodium for
    vars C and C;
  enddef;
  def map between engine and ical for
    vars time and time;
  enddef;
  def map between engine and ikr for
    vars time and time;
  enddef;
  def map between engine and iks for
    vars time and time;
  enddef;
  def map between engine and ikur for
    vars time and time;
  enddef;
  def map between engine and ina for
    vars time and time;
  enddef;
  def map between engine and inal for
    vars time and time;
  enddef;
  def map between engine and ito for
    vars time and time;
  enddef;
  def map between engine and membrane for
    vars time and time;
  enddef;
  def map between engine and potassium for
    vars time and time;
  enddef;
  def map between engine and ryr for
    vars time and time;
  enddef;
  def map between engine and sodium for
    vars time and time;
  enddef;
  def map between engine and stimulus for
    vars time and time;
  enddef;
  def map between geom and sodium for
    vars Vjn and Vjn;
    vars Vmyo and Vmyo;
    vars Vsl and Vsl;
  enddef;
  def map between icab and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between icab and membrane for
    vars V and V;
  enddef;
  def map between icab and nernst for
    vars ECa_jn and ECa_jn;
    vars ECa_sl and ECa_sl;
  enddef;
  def map between ical and ion for
    vars Ca_o and Ca_o;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between ical and junc for
    vars Fjn_CaL and Fjn_CaL;
    vars Fsl_CaL and Fsl_CaL;
  enddef;
  def map between ical and membrane for
    vars V and V;
  enddef;
  def map between ical and phys for
    vars F and F;
    vars FRT and FRT;
    vars Q and Q;
  enddef;
  def map between ical and potassium for
    vars ICaL_K and ICaL_K;
    vars K_i and K_i;
  enddef;
  def map between ical and sodium for
    vars ICaL_Na_jn and ICaL_Na_jn;
    vars ICaL_Na_sl and ICaL_Na_sl;
    vars Na_jn and Na_jn;
    vars Na_sl and Na_sl;
  enddef;
  def map between iclb and membrane for
    vars IClB and IClB;
    vars V and V;
  enddef;
  def map between iclb and nernst for
    vars ECl and ECl;
  enddef;
  def map between iclca and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between iclca and membrane for
    vars IClCa and IClCa;
    vars V and V;
  enddef;
  def map between iclca and nernst for
    vars ECl and ECl;
  enddef;
  def map between ik1 and ion for
    vars K_o and K_o;
  enddef;
  def map between ik1 and membrane for
    vars V and V;
  enddef;
  def map between ik1 and nernst for
    vars EK and EK;
  enddef;
  def map between ik1 and potassium for
    vars IK1 and IK1;
  enddef;
  def map between ik1 and sodium for
    vars Na_sl and Na_sl;
  enddef;
  def map between ikach and ion for
    vars K_o and K_o;
  enddef;
  def map between ikach and membrane for
    vars V and V;
  enddef;
  def map between ikach and nernst for
    vars EK and EK;
  enddef;
  def map between ikach and potassium for
    vars IKACh and IKACh;
  enddef;
  def map between ikach and sodium for
    vars Na_sl and Na_sl;
  enddef;
  def map between ikp and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between ikp and membrane for
    vars V and V;
  enddef;
  def map between ikp and nernst for
    vars EK and EK;
  enddef;
  def map between ikp and potassium for
    vars IKp and IKp;
  enddef;
  def map between ikr and ion for
    vars K_o and K_o;
  enddef;
  def map between ikr and membrane for
    vars V and V;
  enddef;
  def map between ikr and nernst for
    vars EK and EK;
  enddef;
  def map between ikr and potassium for
    vars IKr and IKr;
  enddef;
  def map between iks and ion for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between iks and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between iks and membrane for
    vars V and V;
  enddef;
  def map between iks and phys for
    vars FRT and FRT;
  enddef;
  def map between iks and potassium for
    vars IKs and IKs;
    vars K_i and K_i;
  enddef;
  def map between iks and sodium for
    vars Na_i and Na_i;
  enddef;
  def map between ikur and membrane for
    vars V and V;
  enddef;
  def map between ikur and nernst for
    vars EK and EK;
  enddef;
  def map between ikur and potassium for
    vars IKur and IKur;
  enddef;
  def map between ina and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between ina and membrane for
    vars V and V;
  enddef;
  def map between ina and nernst for
    vars ENa_jn and ENa_jn;
    vars ENa_sl and ENa_sl;
  enddef;
  def map between ina and sodium for
    vars INa_jn and INa_jn;
    vars INa_sl and INa_sl;
  enddef;
  def map between inab and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between inab and membrane for
    vars V and V;
  enddef;
  def map between inab and nernst for
    vars ENa_jn and ENa_jn;
    vars ENa_sl and ENa_sl;
  enddef;
  def map between inab and sodium for
    vars INaB_jn and INaB_jn;
    vars INaB_sl and INaB_sl;
  enddef;
  def map between inaca and ion for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between inaca and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between inaca and membrane for
    vars V and V;
  enddef;
  def map between inaca and phys for
    vars FRT and FRT;
    vars Q and Q;
  enddef;
  def map between inaca and sodium for
    vars INaCa_jn and INaCa_jn;
    vars INaCa_sl and INaCa_sl;
    vars Na_jn and Na_jn;
    vars Na_sl and Na_sl;
  enddef;
  def map between inak and ion for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between inak and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between inak and membrane for
    vars V and V;
  enddef;
  def map between inak and phys for
    vars FRT and FRT;
  enddef;
  def map between inak and potassium for
    vars INaK and INaK;
  enddef;
  def map between inak and sodium for
    vars INaK_jn and INaK_jn;
    vars INaK_sl and INaK_sl;
    vars Na_jn and Na_jn;
    vars Na_sl and Na_sl;
  enddef;
  def map between inal and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between inal and membrane for
    vars V and V;
  enddef;
  def map between inal and nernst for
    vars ENa_jn and ENa_jn;
    vars ENa_sl and ENa_sl;
  enddef;
  def map between inal and sodium for
    vars INaL_jn and INaL_jn;
    vars INaL_sl and INaL_sl;
  enddef;
  def map between ion and nernst for
    vars Ca_o and Ca_o;
    vars Cl_i and Cl_i;
    vars Cl_o and Cl_o;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between ipca and junc for
    vars Fjn and Fjn;
    vars Fsl and Fsl;
  enddef;
  def map between ipca and phys for
    vars Q and Q;
  enddef;
  def map between ito and membrane for
    vars V and V;
  enddef;
  def map between ito and nernst for
    vars EK and EK;
  enddef;
  def map between ito and potassium for
    vars Ito and Ito;
  enddef;
  def map between membrane and potassium for
    vars IK_tot and IK_tot;
  enddef;
  def map between membrane and sodium for
    vars INa_tot_jn and INa_tot_jn;
    vars INa_tot_sl and INa_tot_sl;
  enddef;
  def map between membrane and stimulus for
    vars I_stim and I_stim;
  enddef;
  def map between nernst and phys for
    vars FRT and FRT;
  enddef;
  def map between nernst and potassium for
    vars K_i and K_i;
  enddef;
  def map between nernst and sodium for
    vars Na_jn and Na_jn;
    vars Na_sl and Na_sl;
  enddef;
  def map between phys and ryr for
    vars Q and Q;
  enddef;
  def map between phys and sodium for
    vars F and F;
  enddef;
enddef;
