<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="Bioenvironment_OmpRpFormation" name="Bioenvironment_OmpRpFormation"
xmlns:cellml="http://www.cellml.org/cellml/1.1#">
            
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
            <rdf:Description rdf:about="#Bioenvironment_OmpRpReaction">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.0/">
            <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                <vCard:Family>Cooling</vCard:Family>
                <vCard:Given>Mike</vCard:Given>
            </vCard:N>
            <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                <rdf:value>m.cooling@auckland.ac.nz</rdf:value>
                <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
            </vCard:EMAIL>
            <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                <vCard:Orgname>Auckland Bioengineering Institute</vCard:Orgname>
                <vCard:Orgunit>University of Auckland</vCard:Orgunit>
            </vCard:ORG>
            </dc:creator>
            </rdf:Description>
   </rdf:RDF>
   
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="svp_templates/Template_RxR2P2Rev.cellml">
	<units name="nM_per_s" units_ref="nM_per_s"/>
	<units name="nM" units_ref="nM"/>
	<units name="per_nM_per_s" units_ref="per_nM_per_s"/>
        <component component_ref="Template_RxR2P2Rev" name="Template_RxR2P2Rev"/>
  </import>
  
<connection>
	<map_components component_1="Template_DensityToConcentrationConversion_Cph8p" component_2="Template_RxR2P2Rev"/>
	<map_variables variable_1="concentration" variable_2="reactant1"/>
</connection>

<connection>
	<map_components component_1="Template_DensityToConcentrationConversion_Cph8" component_2="Template_RxR2P2Rev"/>
	<map_variables variable_1="concentration" variable_2="product2"/>
</connection>
   
<connection>
	<map_components component_1="Bioenvironment_OmpRpFormation" component_2="Template_RxR2P2Rev"/>
	<map_variables variable_1="Jconcentration" variable_2="J"/>
	<map_variables variable_1="kf" variable_2="kf"/>
	<map_variables variable_1="kb" variable_2="kb"/>
	<map_variables variable_1="OmpR" variable_2="reactant2"/>
	<map_variables variable_1="OmpRp" variable_2="product1"/>
</connection>
  
   <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="svp_templates/Template_ConcentrationToDensityConversion.cellml">
         <component component_ref="Template_ConcentrationToDensityConversion" name="Template_ConcentrationToDensityConversion"/>
         <units name="molecule_per_micrometer2_per_nM" units_ref="molecule_per_micrometer2_per_nM"/>
         <units name="molecule_per_micrometer2" units_ref="molecule_per_micrometer2"/>
         <units name="molecule_per_micrometer2_per_s"  units_ref="molecule_per_micrometer2_per_s"/>
  </import>
  
  <connection>
	<map_components component_1="Bioenvironment_OmpRpFormation" component_2="Template_ConcentrationToDensityConversion"/>
	<map_variables variable_1="Jconcentration_timeless" variable_2="concentration"/>
	<map_variables variable_1="Jdensity_timeless" variable_2="density"/>
	<map_variables variable_1="Ccm" variable_2="Ccm"/>
  </connection>
    
   <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="svp_templates/Template_DensityToConcentrationConversion.cellml">
         <component component_ref="Template_DensityToConcentrationConversion" name="Template_DensityToConcentrationConversion_Cph8"/>
  </import>
  
<connection>
	<map_components component_1="Bioenvironment_OmpRpFormation" component_2="Template_DensityToConcentrationConversion_Cph8"/>
	<map_variables variable_1="Cph8" variable_2="density"/>
	<map_variables variable_1="Ccm" variable_2="Ccm"/>
</connection>
  
    <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="svp_templates/Template_DensityToConcentrationConversion.cellml">
          <component component_ref="Template_DensityToConcentrationConversion" name="Template_DensityToConcentrationConversion_Cph8p"/>
  </import>
  
<connection>
	<map_components component_1="Bioenvironment_OmpRpFormation" component_2="Template_DensityToConcentrationConversion_Cph8p"/>
	<map_variables variable_1="Cph8p" variable_2="density"/>
	<map_variables variable_1="Ccm" variable_2="Ccm"/>
</connection>

   <component name="Bioenvironment_OmpRpFormation">

    <variable name="Jconcentration" private_interface="in" public_interface="out" units="nM_per_s"/>
    <variable name="Jdensity" public_interface="out" units="molecule_per_micrometer2_per_s"/>
    <variable name="Jdensity_timeless" private_interface="in" units="molecule_per_micrometer2"/>
    <variable name="Jconcentration_timeless" private_interface="out" units="nM"/>
    <variable name="kb" private_interface="out" initial_value="0.01" units="per_nM_per_s"/>
    <variable name="kf" private_interface="out" initial_value="0.4" units="per_nM_per_s"/>
    <variable name="OmpR" private_interface="out" public_interface="in" units="nM"/>
    <variable name="OmpRp" private_interface="out" public_interface="in" units="nM"/>
    <variable name="Cph8p" private_interface="out" public_interface="in" units="micrometer2_per_molecule"/>
    <variable name="Cph8" private_interface="out" public_interface="in" units="micrometer2_per_molecule"/>
    <variable name="Ccm" private_interface="out" public_interface="in" units="molecule_per_micrometer2_per_nM"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
    	<apply>
    		<eq/>
    		<ci>Jconcentration_timeless</ci>
		<apply>
			<times/>
			<cn cellml:units="second">1</cn>
			<ci>Jconcentration</ci>
		</apply>
    	</apply>
	<apply>
		<eq/>
		<ci>Jdensity</ci>
		<apply>
			<divide/>
			<ci>Jdensity_timeless</ci>
			<cn cellml:units="second">1</cn>
		</apply>
    	</apply>
    </math>
    
   </component>
 
   <group>
    <relationship_ref relationship="encapsulation"/>
    <component_ref component="Bioenvironment_OmpRpFormation">
      <component_ref component="Template_RxR2P2Rev"/>
      <component_ref component="Template_ConcentrationToDensityConversion"/>
      <component_ref component="Template_DensityToConcentrationConversion_Cph8p"/>
      <component_ref component="Template_DensityToConcentrationConversion_Cph8"/>
    </component_ref>
   </group> 
   
</model>