// reference: subject_type keyword; electrophysiology
def model ni_2017 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit kat_times_1e_minus_15 as
    unit second {expo: -1.0, mult: 1e-15};
    unit mole;
  enddef;
  def unit m2_per_s_times_1e_minus_9 as
    unit metre {expo: 2.0, mult: 1e-09};
    unit second {expo: -1.0};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m3_per_s_per_mol_times_1e6 as
    unit metre {expo: 3.0, mult: 1000000};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m3_per_s_times_1e_minus_15 as
    unit metre {expo: 3.0, mult: 1e-15};
    unit second {expo: -1.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit pA as
    unit ampere {mult: 1e-12};
  enddef;
  def unit pF as
    unit gram {expo: -1.0, mult: 1e-15};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit per_mM2_per_ms as
    unit metre {expo: 6.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole {expo: -2.0};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit uM as
    unit metre {expo: -3.0, mult: 0.001};
    unit mole;
  enddef;
  def unit um as
    unit metre {mult: 1e-06};
  enddef;
  def unit um2 as
    unit metre {expo: 2.0, mult: 1e-12};
  enddef;
  def unit um3 as
    unit metre {expo: 3.0, mult: 1e-18};
  enddef;

  def comp acacetin as
    var Aca_IC50_IKr: uM {init: 32.4};
    var Aca_IC50_IKs: uM {init: 81.4};
    var Aca_IC50_Ito: uM {init: 9.3};
    var Aca_hill_IKr: dimensionless {init: 0.9};
    var Aca_hill_IKs: dimensionless {init: 0.8};
    var Aca_hill_Ito: dimensionless {init: 0.9};
    var conc: uM {pub: out, init: 1e-14};
    var fKr: dimensionless {pub: out};
    var fKs: dimensionless {pub: out};
    var fto: dimensionless {pub: out};
    fKr = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+pow(Aca_IC50_IKr/conc, Aca_hill_IKr));
    fKs = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+pow(Aca_IC50_IKs/conc, Aca_hill_IKs));
    fto = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+pow(Aca_IC50_Ito/conc, Aca_hill_Ito));
  enddef;

  def comp af as
    var af: dimensionless {pub: out, init: 0.0};
  enddef;

  def comp calcium as
    var Aj_nj: um2 {pub: in};
    var BCa: mM {init: 0.024};
    var CSQN: mM {init: 6.7};
    var Ca_SRi: mM {pub: out, init: 9.89241162100000015e-01};
    var Ca_SRss: mM {pub: out, init: 9.77916803700000004e-01};
    var Ca_i: mM {pub: out, init: 1.40313306500000005e-04};
    var Ca_ss: mM {pub: out, init: 1.31359510499999994e-04};
    var DCa: m2_per_s_times_1e_minus_9 {init: 0.78};
    var DCaSR: m2_per_s_times_1e_minus_9 {init: 0.044};
    var F: C_per_mmol {pub: in};
    var ICaL: pA {pub: in};
    var ICap: pA {pub: in};
    var INaCa: pA {pub: in};
    var I_tot: pA;
    var IbCa: pA {pub: in};
    var JCa: kat_times_1e_minus_15;
    var JCass: kat_times_1e_minus_15;
    var JSRCaSS: kat_times_1e_minus_15;
    var JSRCai: kat_times_1e_minus_15;
    var JSRCaleaki: kat_times_1e_minus_15;
    var JSRCaleakss: kat_times_1e_minus_15;
    var J_SERCASR: kat_times_1e_minus_15 {pub: in};
    var J_SERCASRss: kat_times_1e_minus_15 {pub: in};
    var J_bulkSERCA: kat_times_1e_minus_15 {pub: in};
    var J_bulkSERCAss: kat_times_1e_minus_15 {pub: in};
    var Jj_nj: kat_times_1e_minus_15;
    var Jreli: kat_times_1e_minus_15 {pub: in};
    var Jrelss: kat_times_1e_minus_15 {pub: in};
    var KdBCa: mM {init: 0.00238};
    var KdCSQN: mM {init: 0.8};
    var KdSLhigh: mM {init: 0.013};
    var KdSLlow: mM {init: 1.1};
    var SLhigh: mM {init: 13.0};
    var SLlow: mM {init: 165.0};
    var VSRi: um3 {pub: in};
    var VSRss: um3 {pub: in};
    var Vnj: um3 {pub: in};
    var Vss: um3 {pub: in};
    var af_af: dimensionless {pub: in};
    var calcium_Ca_SRi_beta: dimensionless;
    var calcium_Ca_SRss_beta: dimensionless;
    var calcium_Ca_i_beta: dimensionless;
    var calcium_Ca_ss_beta: dimensionless;
    var dx2: um2 {pub: in};
    var kSRleak: mS_per_uF {init: 6e-06};
    var scaling: dimensionless;
    var time: ms {pub: in};
    var xj_nj: um {pub: in};
    ode(Ca_SRi, time) = 1000.0{dimensionless}*calcium_Ca_SRi_beta*(DCaSR*((Ca_SRss-2.0{dimensionless}*Ca_SRi+Ca_SRi)/dx2+(Ca_SRi-Ca_SRss)/(2.0{dimensionless}*3.0{dimensionless}*dx2))+JSRCai/VSRi);
    ode(Ca_SRss, time) = 1000.0{dimensionless}*calcium_Ca_SRss_beta*(DCaSR*((Ca_SRss-2.0{dimensionless}*Ca_SRss+Ca_SRi)/dx2+(Ca_SRss-Ca_SRi)/(2.0{dimensionless}*4.0{dimensionless}*dx2))+JSRCaSS/VSRss);
    ode(Ca_i, time) = JCa/Vnj*calcium_Ca_i_beta;
    ode(Ca_ss, time) = calcium_Ca_ss_beta*(JCass/Vss+I_tot/(2.0{dimensionless}*Vss*F));
    I_tot = -ICaL-IbCa-ICap+2.0{dimensionless}*INaCa;
    JCa = -J_bulkSERCA+JSRCaleaki+Jreli+Jj_nj;
    JCass = -Jj_nj+JSRCaleakss-J_bulkSERCAss+Jrelss;
    JSRCaSS = J_SERCASRss-JSRCaleakss-Jrelss;
    JSRCai = J_SERCASR-JSRCaleaki-Jreli;
    JSRCaleaki = 0.5{dimensionless}*scaling*kSRleak*(Ca_SRi-Ca_i)*Vnj;
    JSRCaleakss = 0.5{dimensionless}*scaling*kSRleak*(Ca_SRss-Ca_ss)*Vss;
    Jj_nj = 2.5{dimensionless}*DCa*Aj_nj/xj_nj*(Ca_ss-Ca_i);
    calcium_Ca_SRi_beta = 1.0{dimensionless}/(1.0{dimensionless}+CSQN*KdCSQN/sqr(Ca_SRi+KdCSQN));
    calcium_Ca_SRss_beta = 1.0{dimensionless}/(1.0{dimensionless}+CSQN*KdCSQN/sqr(Ca_SRss+KdCSQN));
    calcium_Ca_i_beta = 1.0{dimensionless}/(1.0{dimensionless}+BCa*KdBCa/sqr(Ca_i+KdBCa));
    calcium_Ca_ss_beta = 1.0{dimensionless}/(1.0{dimensionless}+SLlow*KdSLlow/sqr(Ca_ss+KdSLlow)+SLhigh*KdSLhigh/sqr(Ca_ss+KdSLhigh)+BCa*KdBCa/sqr(Ca_ss+KdBCa));
    scaling = sel
      case af_af == 1.0{dimensionless}:
        1.5{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
  enddef;

  def comp cell as
    var Aj_nj: um2 {pub: out, init: 2.49232441199999994e+03};
    var Cm: pF {pub: out, init: 100.0};
    var VSRi: um3 {pub: out};
    var VSRss: um3 {pub: out};
    var Vi: um3 {pub: out, init: 13668.0};
    var Vnj: um3 {pub: out};
    var Vss: um3 {pub: out};
    var dx: um {init: 1.625};
    var dx2: um2 {pub: out};
    var xj_nj: um {pub: out, init: 0.8225};
    VSRi = 2.0{dimensionless}*57.0{um3};
    VSRss = 2.0{dimensionless}*80.0{um3};
    Vnj = 6.0{dimensionless}*2531.0{um3};
    Vss = 2.0{dimensionless}*49.9232{um3};
    dx2 = dx*dx;
  enddef;

  def comp engine as
    var duration: ms {init: 0.5};
    var offset: ms {init: 100.0};
    var pace: dimensionless {pub: out};
    var period: ms {init: 1000.0};
    var time: ms {pub: out};
    pace = sel
      case time-offset-period*floor((time-offset)/period) < duration:
        1.0{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
  enddef;

  def comp ibca as
    var Cm: pF {pub: in};
    var ECa: mV {pub: in};
    var IbCa: pA {pub: out};
    var V: mV {pub: in};
    var gbCa: mS_per_uF;
    IbCa = 1.0{dimensionless}*Cm*gbCa*(V-ECa);
    gbCa = 1.4{dimensionless}*0.001131{mS_per_uF};
  enddef;

  def comp ibna as
    var Cm: pF {pub: in};
    var ENa: mV {pub: in};
    var IbNa: pA {pub: out};
    var V: mV {pub: in};
    var gbNa: mS_per_uF;
    IbNa = 1.7{dimensionless}*Cm*gbNa*(V-ENa);
    gbNa = 0.8{dimensionless}*6.74437500000000015e-4{mS_per_uF};
  enddef;

  def comp ical as
    var Ca_ss: mM {pub: in};
    var Cm: pF {pub: in};
    var ErL: mV {init: 65.0};
    var ICaL: pA {pub: out};
    var V: mV {pub: in};
    var af_af: dimensionless {pub: in};
    var d: dimensionless {init: 2.26716127700000005e-04};
    var f: dimensionless {init: 9.35421288100000026e-01};
    var fca: dimensionless {init: 7.27082366600000030e-01};
    var gCaL: mS_per_uF;
    var ical_d_a: ms;
    var ical_d_inf: dimensionless;
    var ical_d_tau: ms;
    var ical_f_inf: dimensionless;
    var ical_f_tau: ms;
    var ical_fca_inf: dimensionless;
    var ical_fca_tau: ms {init: 2.0};
    var time: ms {pub: in};
    ICaL = 1.333333{dimensionless}*Cm*gCaL*d*f*fca*(V-ErL);
    ode(d, time) = (ical_d_inf-d)/ical_d_tau;
    ode(f, time) = (ical_f_inf-f)/ical_f_tau;
    ode(fca, time) = (ical_fca_inf-fca)/ical_fca_tau;
    gCaL = 0.1294{mS_per_uF}*0.75{dimensionless}*sel(case af_af == 1.0{dimensionless}: 0.35{dimensionless}, otherwise: 1.0{dimensionless});
    ical_d_a = 1.0{ms}/(1.0{dimensionless}+exp((V+10.0{mV})/(-6.24{mV})));
    ical_d_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+10.0{mV})/(-8.0{mV})));
    ical_d_tau = sel
      case abs(V+10.0{mV}) < 1e-10{mV}:
        ical_d_a*4.579{dimensionless};
      otherwise:
        ical_d_a*(1.0{dimensionless}-exp((V+10.0{mV})/(-6.24{mV})))/(0.035{per_mV}*(V+10.0{mV}));
    endsel;
    ical_f_inf = exp(-(V+28.0{mV})/6.9{mV})/(1.0{dimensionless}+exp(-(V+28.0{mV})/6.9{mV}));
    ical_f_tau = 1.5{ms}*2.0{dimensionless}*3.0{dimensionless}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_mV})*sqr(V+10.0{mV}))+0.02{dimensionless});
    ical_fca_inf = 1.0{dimensionless}/(1.0{dimensionless}+Ca_ss/0.00035{mM});
  enddef;

  def comp icap as
    var Ca_ss: mM {pub: in};
    var Cm: pF {pub: in};
    var ICap: pA {pub: out};
    var icapbar: A_per_F {init: 0.275};
    var kmcap: mM {init: 0.0005};
    ICap = 1.26{dimensionless}*Cm*icapbar*Ca_ss/(Ca_ss+kmcap);
  enddef;

  def comp ik1 as
    var Cm: pF {pub: in};
    var EK: mV {pub: in};
    var IK1: pA {pub: out};
    var V: mV {pub: in};
    var af_af: dimensionless {pub: in};
    var gK1: mS_per_uF;
    IK1 = Cm*gK1*(V-EK)/(1.0{dimensionless}+exp(0.07{per_mV}*(V+80.0{mV})));
    gK1 = 0.09{mS_per_uF}*sel(case af_af == 1.0{dimensionless}: 2.1{dimensionless}, otherwise: 1.0{dimensionless});
  enddef;

  def comp ikr as
    var Cm: pF {pub: in};
    var EK: mV {pub: in};
    var IKr: pA {pub: out};
    var V: mV {pub: in};
    var fKr: dimensionless {pub: in};
    var gKr: mS_per_uF;
    var ikr_xr_a: mS_per_uF;
    var ikr_xr_b: mS_per_uF;
    var ikr_xr_inf: dimensionless;
    var ikr_xr_tau: ms;
    var time: ms {pub: in};
    var xr: dimensionless {init: 1.57418133000000000e-03};
    IKr = Cm*fKr*gKr*xr*(V-EK)/(1.0{dimensionless}+exp((V+15.0{mV})/22.4{mV}));
    gKr = 0.8{dimensionless}*2.94117649999999994e-2{mS_per_uF};
    ikr_xr_a = sel
      case abs(V+14.1{mV}) < 1e-10{mV}:
        0.0015{mS_per_uF};
      otherwise:
        0.0003{per_mV_per_ms}*(V+14.1{mV})/(1.0{dimensionless}-exp((V+14.1{mV})/(-5.0{mV})));
    endsel;
    ikr_xr_b = sel
      case abs(V-3.3328{mV}) < 1e-10{mV}:
        3.78361180000000004e-4{mS_per_uF};
      otherwise:
        7.38980000000000030e-5{per_mV_per_ms}*(V-3.3328{mV})/(exp((V-3.3328{mV})/5.1237{mV})-1.0{dimensionless});
    endsel;
    ikr_xr_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+14.1{mV})/(-6.5{mV})));
    ikr_xr_tau = 1.0{dimensionless}/(ikr_xr_a+ikr_xr_b);
    ode(xr, time) = (ikr_xr_inf-xr)/ikr_xr_tau;
  enddef;

  def comp iks as
    var Cm: pF {pub: in};
    var EK: mV {pub: in};
    var IKs: pA {pub: out};
    var V: mV {pub: in};
    var af_af: dimensionless {pub: in};
    var fKs: dimensionless {pub: in};
    var gKs: mS_per_uF;
    var iks_xs_a: mS_per_uF;
    var iks_xs_b: mS_per_uF;
    var iks_xs_inf: dimensionless;
    var iks_xs_tau: ms;
    var time: ms {pub: in};
    var xs: dimensionless {init: 2.22597964100000011e-02};
    IKs = Cm*fKs*gKs*xs*xs*(V-EK);
    gKs = 0.8{dimensionless}*1.29411759999999987e-1{mS_per_uF}*sel(case af_af == 1.0{dimensionless}: 2.0{dimensionless}, otherwise: 1.0{dimensionless});
    iks_xs_a = sel
      case abs(V-19.9{mV}) < 1e-10{mV}:
        0.00068{mS_per_uF};
      otherwise:
        4e-5{per_mV_per_ms}*(V-19.9{mV})/(1.0{dimensionless}-exp((V-19.9{mV})/(-17.0{mV})));
    endsel;
    iks_xs_b = sel
      case abs(V-19.9{mV}) < 1e-10{mV}:
        0.000315{mS_per_uF};
      otherwise:
        3.5e-5{per_mV_per_ms}*(V-19.9{mV})/(exp((V-19.9{mV})/9.0{mV})-1.0{dimensionless});
    endsel;
    iks_xs_inf = sqrt(1.0{dimensionless}/(1.0{dimensionless}+exp((V-19.9{mV})/(-12.7{mV}))));
    iks_xs_tau = 0.5{dimensionless}/(iks_xs_a+iks_xs_b);
    ode(xs, time) = (iks_xs_inf-xs)/iks_xs_tau;
  enddef;

  def comp ikur as
    var BC: dimensionless {init: 3.06272282199999992e-15};
    var BO: dimensionless {init: 2.35547751699999996e-16};
    var Cm: pF {pub: in};
    var EK: mV {pub: in};
    var FRT: per_mV {pub: in};
    var IKur: pA {pub: out};
    var KC: m3_per_s_per_mol_times_1e6 {init: 2.47871658999999998e-03};
    var KO: m3_per_s_per_mol_times_1e6 {init: 1.94459589999999990e-04};
    var K_Q10: dimensionless {init: 3.0};
    var LC: mS_per_uF {init: 2.86367149999999988e-04};
    var LO: mS_per_uF {init: 2.90998690000000002e-04};
    var V: mV {pub: in};
    var ZKC: dimensionless;
    var ZKO: dimensionless;
    var ZLC: dimensionless {init: 8.37073022689999946e-01};
    var ZLO: dimensionless;
    var a: dimensionless {init: 2.41788180099999987e-04};
    var af_af: dimensionless {pub: in};
    var conc: uM {pub: in};
    var gKur: mS_per_uF;
    var i: dimensionless {init: 9.51727886399999945e-01};
    var ikur_a_inf: dimensionless;
    var ikur_a_tau: ms;
    var ikur_i_inf: dimensionless;
    var ikur_i_tau: ms;
    var time: ms {pub: in};
    ode(BC, time) = KC*exp(-ZKC*V*FRT)*conc*i*(1.0{dimensionless}-a)*(1.0{dimensionless}-BO-BC)-LC*BC*exp(-ZLC*V*FRT);
    ode(BO, time) = KO*exp(-ZKO*V*FRT)*conc*i*a*(1.0{dimensionless}-BO-BC)-LO*BO*exp(-ZLO*V*FRT);
    IKur = Cm*gKur*(4.5128{dimensionless}+1.899769{dimensionless}/(1.0{dimensionless}+exp((V-20.5232{mV})/(-8.26597{mV}))))*(1.0{dimensionless}-BO-BC)*a*i*(V-EK);
    ZKC = -3.27023573379999988e-1{dimensionless};
    ZKO = -2.57319531729999995e-1{dimensionless};
    ZLO = -1.28015801399999993e-2{dimensionless};
    ode(a, time) = (ikur_a_inf-a)/ikur_a_tau;
    gKur = 0.006398{mS_per_uF}*0.9{dimensionless}*sel(case af_af == 1.0{dimensionless}: 0.5{dimensionless}, otherwise: 1.0{dimensionless});
    ode(i, time) = (ikur_i_inf-i)/ikur_i_tau;
    ikur_a_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+5.52{mV})/8.6{mV}));
    ikur_a_tau = (4.56666746825999965e1{dimensionless}/(1.0{dimensionless}+exp((V+1.12306497072999996e1{mV})/1.15254705961999999e1{mV}))+4.26753514992999960{dimensionless})*(2.62186042981000011e-1{dimensionless}/(1.0{dimensionless}+exp((V+3.58658312706999993e1{mV})/(-3.87510627762000004{mV})))+2.91755017928000016e-1{dimensionless})*1.0{ms}/K_Q10;
    ikur_i_inf = 0.52424{dimensionless}/(1.0{dimensionless}+exp((V+15.1142{mV})/7.567021{mV}))+0.4580778{dimensionless};
    ikur_i_tau = (2328.0{ms}/(1.0{dimensionless}+exp((V-9.435{mV})/3.5827{mV}))+1739.139{ms})/K_Q10;
  enddef;

  def comp ina as
    var BA: dimensionless {init: 0.0};
    var BI: dimensionless {init: 0.0};
    var Cm: pF {pub: in};
    var ENa: mV {pub: in};
    var INa: pA {pub: out};
    var V: mV {pub: in};
    var af_af: dimensionless {pub: in};
    var drug_Ka: m3_per_s_per_mol_times_1e6;
    var drug_Ki: m3_per_s_per_mol_times_1e6;
    var drug_La: mS_per_uF {init: 0.1};
    var drug_Li: mS_per_uF {init: 0.01};
    var drug_concen: uM {init: 0.0};
    var gNa: mS_per_uF {init: 7.8};
    var h: dimensionless {init: 9.16842028100000039e-01};
    var ina_h_alpha: mS_per_uF;
    var ina_h_beta: mS_per_uF;
    var ina_j_alpha: mS_per_uF;
    var ina_j_beta: mS_per_uF;
    var ina_m_alpha: mS_per_uF;
    var ina_m_beta: mS_per_uF;
    var ina_m_shift: mV;
    var j: dimensionless {init: 9.38018356399999975e-01};
    var m: dimensionless {init: 5.63181991600000039e-03};
    var time: ms {pub: in};
    ode(BA, time) = drug_Ka*drug_concen*pow(m, 3.0{dimensionless})*h*j*(1.0{dimensionless}-BA-BI)-drug_La*BA;
    ode(BI, time) = drug_Ki*drug_concen*(1.0{dimensionless}-h)*(1.0{dimensionless}-BA-BI)-drug_Li*BI;
    INa = gNa*pow(m, 3.0{dimensionless})*h*j*(V-ENa)*Cm*(1.0{dimensionless}-BA-BI);
    drug_Ka = 0.1{m3_per_s_per_mol_times_1e6}/1000.0{dimensionless};
    drug_Ki = 0.1{m3_per_s_per_mol_times_1e6}/1000.0{dimensionless};
    ode(h, time) = ina_h_alpha*(1.0{dimensionless}-h)-ina_h_beta*h;
    ina_h_alpha = sel
      case V >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        0.135{mS_per_uF}*exp((V+80.0{mV})/(-6.8{mV}));
    endsel;
    ina_h_beta = sel
      case V >= -40.0{mV}:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
      otherwise:
        3.56{mS_per_uF}*exp(0.079{per_mV}*V)+310000.0{mS_per_uF}*exp(0.35{per_mV}*V);
    endsel;
    ina_j_alpha = sel
      case V >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        (-127140.0{per_mV_per_ms}*exp(0.2444{per_mV}*V)-3.474e-5{per_mV_per_ms}*exp(-0.04391{per_mV}*V))*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
    endsel;
    ina_j_beta = sel
      case V >= -40.0{mV}:
        0.3{mS_per_uF}*exp(-2.535e-7{per_mV}*V)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV})));
      otherwise:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*V)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
    endsel;
    ina_m_alpha = sel
      case abs(V-ina_m_shift+47.13{mV}) < 1e-10{mV}:
        3.2{mS_per_uF};
      otherwise:
        0.32{per_mV_per_ms}*(V-ina_m_shift+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V-ina_m_shift+47.13{mV})));
    endsel;
    ina_m_beta = 0.08{mS_per_uF}*exp(-(V-ina_m_shift)/11.0{mV});
    ina_m_shift = sel
      case af_af == 1.0{dimensionless}:
        1.6{mV};
      otherwise:
        0.0{mV};
    endsel;
    ode(j, time) = ina_j_alpha*(1.0{dimensionless}-j)-ina_j_beta*j;
    ode(m, time) = ina_m_alpha*(1.0{dimensionless}-m)-ina_m_beta*m;
  enddef;

  def comp inaca as
    var Ca_o: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var Cm: pF {pub: in};
    var FRT: per_mV {pub: in};
    var INaCa: pA {pub: out};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var V: mV {pub: in};
    var af_af: dimensionless {pub: in};
    var gammalr: dimensionless {init: 0.35};
    var kmcalr: mM {init: 1.38};
    var kmnalr: mM {init: 87.5};
    var knacalr: A_per_F {init: 1600.0};
    var ksatlr: dimensionless {init: 0.1};
    var scaling: dimensionless;
    INaCa = 1.4{dimensionless}*scaling*Cm*knacalr/(pow(kmnalr, 3.0{dimensionless})+pow(Na_o, 3.0{dimensionless}))/(kmcalr+Ca_o)/(1.0{dimensionless}+ksatlr*exp((gammalr-1.0{dimensionless})*V*FRT))*(pow(Na_i, 3.0{dimensionless})*Ca_o*exp(V*gammalr*FRT)-pow(Na_o, 3.0{dimensionless})*Ca_ss*exp(V*(gammalr-1.0{dimensionless})*FRT));
    scaling = sel
      case af_af == 1.0{dimensionless}:
        1.4{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
  enddef;

  def comp inak as
    var Cm: pF {pub: in};
    var FRT: per_mV {pub: in};
    var INaK: pA {pub: out};
    var I_bar: A_per_F;
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var V: mV {pub: in};
    var fnak: dimensionless;
    var kmko: mM {init: 1.5};
    var kmnai: mM {init: 10.0};
    var sigma: dimensionless;
    INaK = 1.28{dimensionless}*Cm*I_bar*fnak*K_o/(K_o+kmko)/(1.0{dimensionless}+pow(kmnai/Na_i, 4.0{dimensionless}));
    I_bar = 1.4{dimensionless}*5.99338739999999981e-1{A_per_F};
    fnak = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FRT)+0.0365{dimensionless}*sigma*exp(-V*FRT));
    sigma = (exp(Na_o/67.3{mM})-1.0{dimensionless})/7.0{dimensionless};
  enddef;

  def comp ion as
    var Ca_o: mM {pub: out, init: 1.8};
    var K_o: mM {pub: out, init: 5.4};
    var Na_o: mM {pub: out, init: 140.0};
  enddef;

  def comp ito as
    var Cm: pF {pub: in};
    var EK: mV {pub: in};
    var Ito: pA {pub: out};
    var V: mV {pub: in};
    var af_af: dimensionless {pub: in};
    var fto: dimensionless {pub: in};
    var gto: mS_per_uF;
    var ito_r_inf: dimensionless;
    var ito_r_shift: mV;
    var ito_r_tau: ms;
    var ito_s_inf: dimensionless;
    var ito_s_tau: ms;
    var r: dimensionless {init: 1.22370601099999997e-02};
    var s: dimensionless {init: 8.84913984200000003e-01};
    var time: ms {pub: in};
    Ito = 1.05{dimensionless}*fto*Cm*gto*r*s*(V-EK);
    gto = 0.75471{dimensionless}*0.1962{mS_per_uF}*sel(case af_af == 1.0{dimensionless}: 0.35{dimensionless}, otherwise: 1.0{dimensionless});
    ito_r_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-ito_r_shift-1.0{mV})/(-11.0{mV})));
    ito_r_shift = sel
      case af_af == 1.0{dimensionless}:
        16.0{mV};
      otherwise:
        0.0{mV};
    endsel;
    ito_r_tau = 3.5{ms}*exp(-((V-ito_r_shift)/30.0{mV})*2.0{dimensionless})+1.5{ms};
    ito_s_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+40.5{mV})/11.5{mV}));
    ito_s_tau = 25.635{ms}*exp(-((V+52.45{mV})/15.8827{mV})*2.0{dimensionless})+14.14{ms};
    ode(r, time) = (ito_r_inf-r)/ito_r_tau;
    ode(s, time) = (ito_s_inf-s)/ito_s_tau;
  enddef;

  def comp membrane as
    var Cm: pF {pub: in};
    var ICaL: pA {pub: in};
    var ICap: pA {pub: in};
    var IK1: pA {pub: in};
    var IKr: pA {pub: in};
    var IKs: pA {pub: in};
    var IKur: pA {pub: in};
    var INa: pA {pub: in};
    var INaCa: pA {pub: in};
    var INaK: pA {pub: in};
    var IbCa: pA {pub: in};
    var IbNa: pA {pub: in};
    var Ito: pA {pub: in};
    var V: mV {pub: out, init: -7.71325583600000044e+01};
    var i_diff: pA {init: 0.0};
    var i_ion: pA;
    var i_stim: pA {pub: in};
    var time: ms {pub: in};
    ode(V, time) = -(i_ion+i_stim+i_diff)/Cm;
    i_ion = +INa+Ito+IKur+IKr+IKs+ICaL+IK1+IbNa+IbCa+INaCa+INaK+ICap;
  enddef;

  def comp nernst as
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var ECa: mV {pub: out};
    var EK: mV {pub: out};
    var ENa: mV {pub: out};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    ECa = 13.35{mV}*ln(Ca_o/Ca_i);
    EK = 26.71{mV}*ln(K_o/K_i);
    ENa = 26.71{mV}*ln(Na_o/Na_i);
  enddef;

  def comp phys as
    var F: C_per_mmol {pub: out, init: 96.4867};
    var FRT: per_mV {pub: out};
    var R: J_per_mol_per_K {init: 8.3143};
    var T: kelvin {init: 310.0};
    FRT = F/R/T;
  enddef;

  def comp potassium as
    var K_i: mM {pub: out, init: 1.31867138000000011e+02};
    var time: ms {pub: in};
    ode(K_i, time) = 0.0{mM_per_ms};
  enddef;

  def comp ryr as
    var Ca_SRi: mM {pub: in};
    var Ca_SRss: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var Jreli: kat_times_1e_minus_15 {pub: out};
    var Jrelss: kat_times_1e_minus_15 {pub: out};
    var RyRSRCai: dimensionless;
    var RyRSRCass: dimensionless;
    var Vnj: um3 {pub: in};
    var Vss: um3 {pub: in};
    var a_i: dimensionless {init: 2.97721944299999985e-01};
    var a_ss: dimensionless {init: 1.41927157299999995e-01};
    var af_af: dimensionless {pub: in};
    var c_i: dimensionless {init: 9.79023869800000002e-01};
    var c_ss: dimensionless {init: 9.57197650200000028e-01};
    var fRyr: dimensionless;
    var nui: m3_per_s_times_1e_minus_15;
    var nuss: m3_per_s_times_1e_minus_15;
    var o_i: dimensionless {init: 3.66799927299999980e-04};
    var o_ss: dimensionless {init: 4.56694440999999974e-04};
    var ryr_a_i_inf: dimensionless;
    var ryr_a_i_tau: ms;
    var ryr_a_ss_inf: dimensionless;
    var ryr_a_ss_tau: ms;
    var ryr_c_i_inf: dimensionless;
    var ryr_c_i_tau: ms;
    var ryr_c_ss_inf: dimensionless;
    var ryr_c_ss_tau: ms;
    var ryr_o_i_inf: dimensionless;
    var ryr_o_i_tau: ms {init: 5.0};
    var ryr_o_ss_inf: dimensionless;
    var ryr_o_ss_tau: ms {init: 5.0};
    var scaling: dimensionless;
    var tau_scaling: dimensionless;
    var time: ms {pub: in};
    Jreli = scaling*nui*o_i*c_i*RyRSRCai*(Ca_SRi-Ca_i);
    Jrelss = scaling*nuss*o_ss*c_ss*RyRSRCass*(Ca_SRss-Ca_ss);
    RyRSRCai = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((Ca_SRi-0.3{mM})/0.1{mM}));
    RyRSRCass = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((Ca_SRss-0.3{mM})/0.1{mM}));
    ode(a_i, time) = (ryr_a_i_inf-a_i)/ryr_a_i_tau;
    ode(a_ss, time) = (ryr_a_ss_inf-a_ss)/ryr_a_ss_tau;
    ode(c_i, time) = (ryr_c_i_inf-c_i)/ryr_c_i_tau;
    ode(c_ss, time) = (ryr_c_ss_inf-c_ss)/ryr_c_ss_tau;
    fRyr = sel
      case af_af == 1.0{dimensionless}:
        2.5{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    nui = 0.001{mS_per_uF}*Vnj;
    nuss = 0.625{mS_per_uF}*Vss;
    ode(o_i, time) = (ryr_o_i_inf-o_i)/ryr_o_i_tau;
    ode(o_ss, time) = (ryr_o_ss_inf-o_ss)/ryr_o_ss_tau;
    ryr_a_i_inf = 0.505{dimensionless}-0.427{dimensionless}/(1.0{dimensionless}+exp((2000.0{m3_per_mol}*Ca_i*(1.0{dimensionless}+fRyr)-0.29{dimensionless})/0.082{dimensionless}));
    ryr_a_i_tau = 250.0{ms}*tau_scaling;
    ryr_a_ss_inf = 0.505{dimensionless}-0.427{dimensionless}/(1.0{dimensionless}+exp((1000.0{m3_per_mol}*Ca_ss*(1.0{dimensionless}+fRyr)-0.29{dimensionless})/0.082{dimensionless}));
    ryr_a_ss_tau = 250.0{ms}*tau_scaling;
    ryr_c_i_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((2000.0{m3_per_mol}*Ca_i*(1.0{dimensionless}+fRyr)-(a_i+0.02{dimensionless}))/0.01{dimensionless}));
    ryr_c_i_tau = 2.0{dimensionless}*15.0{ms}*tau_scaling;
    ryr_c_ss_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((1000.0{m3_per_mol}*Ca_ss*(1.0{dimensionless}+fRyr)-(a_ss+0.02{dimensionless}))/0.01{dimensionless}));
    ryr_c_ss_tau = 15.0{ms}*tau_scaling;
    ryr_o_i_inf = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((2000.0{m3_per_mol}*Ca_i*(1.0{dimensionless}+fRyr)-(a_i+0.22{dimensionless}))/0.03{dimensionless}));
    ryr_o_ss_inf = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+exp((1000.0{m3_per_mol}*Ca_ss*(1.0{dimensionless}+fRyr)-(a_ss+0.22{dimensionless}))/0.03{dimensionless}));
    scaling = sel
      case af_af == 1.0{dimensionless}:
        3.0{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    tau_scaling = sel
      case af_af == 1.0{dimensionless}:
        2.7{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
  enddef;

  def comp serca as
    var Ca_SRi: mM {pub: in};
    var Ca_SRss: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_ss: mM {pub: in};
    var J_SERCASR: kat_times_1e_minus_15 {pub: out};
    var J_SERCASRss: kat_times_1e_minus_15 {pub: out};
    var J_bulkSERCA: kat_times_1e_minus_15 {pub: out};
    var J_bulkSERCAss: kat_times_1e_minus_15 {pub: out};
    var SERCACa: mM {init: 9.58584701999999969e-03};
    var SERCACass: mM {init: 9.38694111799999974e-03};
    var Vnj: um3 {pub: in};
    var Vss: um3 {pub: in};
    var af_af: dimensionless {pub: in};
    var cpumps: mM {init: 0.04};
    var k1: per_mM2_per_ms {init: 7500.0};
    var k2: mS_per_uF {init: 4.68749999999999983e-04};
    var k3: per_mM2_per_ms {init: 2.31481500000000001e-03};
    var k4: mS_per_uF {init: 0.0075};
    var scaling: dimensionless;
    var time: ms {pub: in};
    J_SERCASR = scaling*0.75{dimensionless}*(-k3*sqr(Ca_SRi)*(cpumps-SERCACa)+k4*SERCACa)*Vnj*2.0{dimensionless};
    J_SERCASRss = scaling*0.75{dimensionless}*(-k3*sqr(Ca_SRss)*(cpumps-SERCACass)+k4*SERCACass)*Vss*2.0{dimensionless};
    J_bulkSERCA = scaling*0.75{dimensionless}*(k1*sqr(Ca_i)*(cpumps-SERCACa)-k2*SERCACa)*Vnj*2.0{dimensionless};
    J_bulkSERCAss = scaling*0.75{dimensionless}*(k1*sqr(Ca_ss)*(cpumps-SERCACass)-k2*SERCACass)*Vss*2.0{dimensionless};
    ode(SERCACa, time) = (-J_SERCASR+J_bulkSERCA)/Vnj;
    ode(SERCACass, time) = (-J_SERCASRss+J_bulkSERCAss)/Vss;
    scaling = sel
      case af_af == 1.0{dimensionless}:
        0.6{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
  enddef;

  def comp sodium as
    var F: C_per_mmol {pub: in};
    var INa: pA {pub: in};
    var INaCa: pA {pub: in};
    var INaK: pA {pub: in};
    var IbNa: pA {pub: in};
    var Na_i: mM {pub: out, init: 1.03039701200000007e+01};
    var Vi: um3 {pub: in};
    var time: ms {pub: in};
    ode(Na_i, time) = (-3.0{dimensionless}*INaK-3.0{dimensionless}*INaCa-IbNa-INa)/(F*Vi);
  enddef;

  def comp stimulus as
    var Cm: pF {pub: in};
    var amplitude: A_per_F;
    var i_stim: pA {pub: out};
    var pace: dimensionless {pub: in};
    amplitude = -80.0{A_per_F};
    i_stim = Cm*pace*amplitude;
  enddef;
  def map between acacetin and ikr for
    vars fKr and fKr;
  enddef;
  def map between acacetin and iks for
    vars fKs and fKs;
  enddef;
  def map between acacetin and ikur for
    vars conc and conc;
  enddef;
  def map between acacetin and ito for
    vars fto and fto;
  enddef;
  def map between af and calcium for
    vars af and af_af;
  enddef;
  def map between af and ical for
    vars af and af_af;
  enddef;
  def map between af and ik1 for
    vars af and af_af;
  enddef;
  def map between af and iks for
    vars af and af_af;
  enddef;
  def map between af and ikur for
    vars af and af_af;
  enddef;
  def map between af and ina for
    vars af and af_af;
  enddef;
  def map between af and inaca for
    vars af and af_af;
  enddef;
  def map between af and ito for
    vars af and af_af;
  enddef;
  def map between af and ryr for
    vars af and af_af;
  enddef;
  def map between af and serca for
    vars af and af_af;
  enddef;
  def map between calcium and cell for
    vars Aj_nj and Aj_nj;
    vars VSRi and VSRi;
    vars VSRss and VSRss;
    vars Vnj and Vnj;
    vars Vss and Vss;
    vars dx2 and dx2;
    vars xj_nj and xj_nj;
  enddef;
  def map between calcium and engine for
    vars time and time;
  enddef;
  def map between calcium and ibca for
    vars IbCa and IbCa;
  enddef;
  def map between calcium and ical for
    vars Ca_ss and Ca_ss;
    vars ICaL and ICaL;
  enddef;
  def map between calcium and icap for
    vars Ca_ss and Ca_ss;
    vars ICap and ICap;
  enddef;
  def map between calcium and inaca for
    vars Ca_ss and Ca_ss;
    vars INaCa and INaCa;
  enddef;
  def map between calcium and nernst for
    vars Ca_i and Ca_i;
  enddef;
  def map between calcium and phys for
    vars F and F;
  enddef;
  def map between calcium and ryr for
    vars Ca_SRi and Ca_SRi;
    vars Ca_SRss and Ca_SRss;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
    vars Jreli and Jreli;
    vars Jrelss and Jrelss;
  enddef;
  def map between calcium and serca for
    vars Ca_SRi and Ca_SRi;
    vars Ca_SRss and Ca_SRss;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
    vars J_SERCASR and J_SERCASR;
    vars J_SERCASRss and J_SERCASRss;
    vars J_bulkSERCA and J_bulkSERCA;
    vars J_bulkSERCAss and J_bulkSERCAss;
  enddef;
  def map between cell and ibca for
    vars Cm and Cm;
  enddef;
  def map between cell and ibna for
    vars Cm and Cm;
  enddef;
  def map between cell and ical for
    vars Cm and Cm;
  enddef;
  def map between cell and icap for
    vars Cm and Cm;
  enddef;
  def map between cell and ik1 for
    vars Cm and Cm;
  enddef;
  def map between cell and ikr for
    vars Cm and Cm;
  enddef;
  def map between cell and iks for
    vars Cm and Cm;
  enddef;
  def map between cell and ikur for
    vars Cm and Cm;
  enddef;
  def map between cell and ina for
    vars Cm and Cm;
  enddef;
  def map between cell and inaca for
    vars Cm and Cm;
  enddef;
  def map between cell and inak for
    vars Cm and Cm;
  enddef;
  def map between cell and ito for
    vars Cm and Cm;
  enddef;
  def map between cell and membrane for
    vars Cm and Cm;
  enddef;
  def map between cell and ryr for
    vars Vnj and Vnj;
    vars Vss and Vss;
  enddef;
  def map between cell and serca for
    vars Vnj and Vnj;
    vars Vss and Vss;
  enddef;
  def map between cell and sodium for
    vars Vi and Vi;
  enddef;
  def map between cell and stimulus for
    vars Cm and Cm;
  enddef;
  def map between engine and ical for
    vars time and time;
  enddef;
  def map between engine and ikr for
    vars time and time;
  enddef;
  def map between engine and iks for
    vars time and time;
  enddef;
  def map between engine and ikur for
    vars time and time;
  enddef;
  def map between engine and ina for
    vars time and time;
  enddef;
  def map between engine and ito for
    vars time and time;
  enddef;
  def map between engine and membrane for
    vars time and time;
  enddef;
  def map between engine and potassium for
    vars time and time;
  enddef;
  def map between engine and ryr for
    vars time and time;
  enddef;
  def map between engine and serca for
    vars time and time;
  enddef;
  def map between engine and sodium for
    vars time and time;
  enddef;
  def map between engine and stimulus for
    vars pace and pace;
  enddef;
  def map between ibca and membrane for
    vars IbCa and IbCa;
    vars V and V;
  enddef;
  def map between ibca and nernst for
    vars ECa and ECa;
  enddef;
  def map between ibna and membrane for
    vars IbNa and IbNa;
    vars V and V;
  enddef;
  def map between ibna and nernst for
    vars ENa and ENa;
  enddef;
  def map between ibna and sodium for
    vars IbNa and IbNa;
  enddef;
  def map between ical and membrane for
    vars ICaL and ICaL;
    vars V and V;
  enddef;
  def map between icap and membrane for
    vars ICap and ICap;
  enddef;
  def map between ik1 and membrane for
    vars IK1 and IK1;
    vars V and V;
  enddef;
  def map between ik1 and nernst for
    vars EK and EK;
  enddef;
  def map between ikr and membrane for
    vars IKr and IKr;
    vars V and V;
  enddef;
  def map between ikr and nernst for
    vars EK and EK;
  enddef;
  def map between iks and membrane for
    vars IKs and IKs;
    vars V and V;
  enddef;
  def map between iks and nernst for
    vars EK and EK;
  enddef;
  def map between ikur and membrane for
    vars IKur and IKur;
    vars V and V;
  enddef;
  def map between ikur and nernst for
    vars EK and EK;
  enddef;
  def map between ikur and phys for
    vars FRT and FRT;
  enddef;
  def map between ina and membrane for
    vars INa and INa;
    vars V and V;
  enddef;
  def map between ina and nernst for
    vars ENa and ENa;
  enddef;
  def map between ina and sodium for
    vars INa and INa;
  enddef;
  def map between inaca and ion for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between inaca and membrane for
    vars INaCa and INaCa;
    vars V and V;
  enddef;
  def map between inaca and phys for
    vars FRT and FRT;
  enddef;
  def map between inaca and sodium for
    vars INaCa and INaCa;
    vars Na_i and Na_i;
  enddef;
  def map between inak and ion for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between inak and membrane for
    vars INaK and INaK;
    vars V and V;
  enddef;
  def map between inak and phys for
    vars FRT and FRT;
  enddef;
  def map between inak and sodium for
    vars INaK and INaK;
    vars Na_i and Na_i;
  enddef;
  def map between ion and nernst for
    vars Ca_o and Ca_o;
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between ito and membrane for
    vars Ito and Ito;
    vars V and V;
  enddef;
  def map between ito and nernst for
    vars EK and EK;
  enddef;
  def map between membrane and stimulus for
    vars i_stim and i_stim;
  enddef;
  def map between nernst and potassium for
    vars K_i and K_i;
  enddef;
  def map between nernst and sodium for
    vars Na_i and Na_i;
  enddef;
  def map between phys and sodium for
    vars F and F;
  enddef;
enddef;
