//   FILE :  puglisi_bers_model_2001.xml
//
// CREATED :  31st January 2002
//
// LAST MODIFIED : 5th June 2003
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of rabbit ventricular  myocyte ion channels based on the Puglisi and Bers model, 2001.  This model
// is a development of the LR-II model.
//
// CHANGES:
//   25/02/2002 - CML - Corrected several equations.
//   27/02/2002 - CML - Corrected initial values and units.
//   17/06/2002 - AAC - Changed equation 'i_leak_calcualtion' to
//                      'i_leak_calculation'.
//   18/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   05/06/2003 - CML - Corrected alpha_j_calculation equation in
//                      fast_sodium_current_j_gate component and removed
//                      I_S_calculation from L_type_Ca_channel component.
def model puglisi_bers_2001_version01 as
  // An Interactive Computer Model Of Rabbit Ventricular Myocyte Ion Channels and Ca Transport, 2001
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // In 2001 Jose Puglisi and Donald Bers published an interactive computer model of rabbit ventricular myocyte ion channels and Ca transport (see the figure below). An interactive computer program, LabHEART, was developed to simulate the action potential, ionic currents and Ca handling mechanisms in a rabbit ventricular myocyte. Please click here to download the latest version of LabHeart. (http://www.meddean.luc.edu/templates/ssom/depts/physio/labheart.cfm/)
  //
  // Since Hodgkin and Huxley published their mathematical model of the squid axon in 1952 several groups have extended this modelling to cardiac ionic currents and action potentials. Ca also plays an essential role in cardiac excitation-contraction coupling, and the dynamic interplay between the action potential and Ca regulation mechanisms has come to be included in cardiac cell models.
  //
  // Of the many electrophysiological models, Luo and Rudy's dynamic model (1994) has perhaps become the standard, updated with modifications based on experimental data generated by other research groups (for example Zeng, Laurita, Rosenbaum and Rudy (1995), Shaw and Rudy (1997), Viswanathan, Shaw and Rudy (1999) and Faber and Rudy (2000)). Jose Puglisi and Donald Bers adapted the equations from Luo and Rudy to rabbit ventricular myocytes using values obtained from the literature and from their own laboratory. The main differences between this model and Luo-Rudy II is the inclusion of a transient outward K current (i_to) and Ca-activated Cl current (i_Cl_Ca), as well as altering the kinetics of the T-type Ca channel (i_Ca_T), the rapid component of the delayed rectifier K current (i_Kr) and the rescaling of several conductances to match results in the rabbit ventricle.
  //
  // The complete original paper reference is cited below:
  //
  // LabHEART: an interactive computer model of rabbit ventricular myocyte ion channels and Ca transport, Jose L. Puglisi and Donald M. Bers, 2001,American Journal of Physiology, 281, C2049-C2060. PubMed ID: 11698264 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=11698264&dopt=Abstract)
  //
  // cell diagram of the Puglisi-Bers ventricular myocyte model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the Puglisi-Bers rabbit ventricular myocyte model.
  //
  // the cellml rendering of the Puglisi-Bers model
  //
  // The network defined in the CellML description of the Puglisi-Bers model. A key describing the significance of the shapes of the components and the colours of the connections between them is in the notation guide (${HTML_EXMPL_GRAPHICAL_NOTATION}). For simplicity, not all the variables are shown.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit millimolar_per_millisecond as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: millisecond {pub: out};
  enddef;
  // The "membrane" component is really the `root' node of our model.
  // It defines the action potential variable "V" among other things.

  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0042391
  def comp membrane as
    var V: millivolt {init: -84.09, pub: out};
    var R: millijoule_per_mole_kelvin {init: 8314.0, pub: out};
    var T: kelvin {init: 310.0, pub: out};
    var F: coulomb_per_mole {init: 96845.0, pub: out};
    var C: microF {init: 1.0};
    var I_stim: microA_per_microF {init: -100.0};
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_T: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var i_Kr: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var i_Ks: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var i_K1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var i_Kp: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_p_Ca: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Na_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Ca_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_to: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var i_Cl_Ca: microA_per_microF {pub: in};
    ode(V, time) = (I_stim-(i_Na+i_Ca_L+i_Ca_T+i_Kr+i_Ks+i_NaCa+i_K1+i_Kp+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_to+i_Cl_Ca))/C;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na: millivolt {init: 70.54, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_Na: milliS_per_microF {init: 8.0};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org//
  def comp fast_sodium_current_m_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_m: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1.0{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11.0{millivolt});
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org//
  def comp fast_sodium_current_h_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_h: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_h: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40.0{millivolt}:
        0.135{per_millisecond}*exp((80.0{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40.0{millivolt}:
        3.56{per_millisecond}*exp(0.079{millivolt}*V)+310000.0{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1.0{dimensionless}/(0.13{millisecond}*(1.0{dimensionless}+exp(-(V+10.66{millivolt})/11.1{millivolt})));
    endsel;
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_j_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org//
    var j: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_j: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_j: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40.0{millivolt}:
        (-127140.0{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)-0.00003474{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))*((V+37.78{millivolt})/(1.0{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt}))));
      otherwise:
        0.0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40.0{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-0.0000002535{per_millivolt}*V)/(1.0{dimensionless}+exp(-0.1{per_millivolt}*(V+32.0{millivolt})));
    endsel;
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0048763
    var i_CaCa: microA_per_microF {pub: out};
    var i_CaK: microA_per_microF {pub: out};
    var i_CaNa: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0048763
    var I_CaCa: microA_per_microF;
    var I_CaK: microA_per_microF;
    var I_CaNa: microA_per_microF;
    var P_Ca: cm_per_second {init: 0.00054};
    var P_Na: cm_per_second {init: 0.000000675};
    var P_K: cm_per_second {init: 0.000000193};
    var gamma_Cai: dimensionless {init: 1.0};
    var gamma_Cao: dimensionless {init: 0.34};
    var gamma_Nai: dimensionless {init: 0.75};
    var gamma_Nao: dimensionless {init: 0.75};
    var gamma_Ki: dimensionless {init: 0.75};
    var gamma_Ko: dimensionless {init: 0.75};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Cai: micromolar {priv: out, pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_CaCa = d*f*f_Ca*I_CaCa;
    i_CaNa = d*f*f_Ca*I_CaNa;
    i_CaK = d*f*f_Ca*I_CaK;
    I_CaCa = P_Ca*sqr(2.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Cai*Cai*exp(2.0{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    I_CaNa = P_Na*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Nai*Nai*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    I_CaK = P_K*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Ki*Ki*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_d_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var d: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var alpha_d: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var beta_d: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var d_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_d = d_infinity/tau_d;
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-((V+10.0{millivolt})/6.24{millivolt})));
    tau_d = d_infinity*((1.0{dimensionless}-exp(-((V+10.0{millivolt})/6.24{millivolt})))/(0.035{per_millivolt_millisecond}*(V+10.0{millivolt})));
    beta_d = (1.0{dimensionless}-d_infinity)/tau_d;
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_f_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var f: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var alpha_f: per_millisecond;
    var beta_f: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var f_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_f = f_infinity/tau_f;
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+35.06{millivolt})/8.6{millivolt}))+0.6{dimensionless}/(1.0{dimensionless}+exp((50.0{millivolt}-V)/20.0{millivolt}));
    tau_f = 1.0{millisecond}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_millivolt}*(V+10.0{millivolt})))+0.02{dimensionless});
    beta_f = (1.0{dimensionless}-f_infinity)/tau_f;
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_f_Ca_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var f_Ca: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org//
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var Km_Ca: micromolar {init: 0.6};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    f_Ca = 1.0{dimensionless}/(1.0{dimensionless}+sqr(Cai/Km_Ca));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_T: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g_Ca_T: milliS_per_microF {init: 0.05};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var E_Ca: millivolt;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Cai: micromolar {pub: in};
    var Cao: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var b: dimensionless {priv: in};
    var g: dimensionless {priv: in};
    i_Ca_T = g_Ca_T*b*g*(V-E_Ca);
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel_b_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var b: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var b_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_b: millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    ode(b, time) = (b_infinity-b)/tau_b;
    b_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+48.0{millivolt})/6.1{millivolt}));
    tau_b = 0.1{millisecond}+5.4{millisecond}/(1.0{dimensionless}+exp((V+100.0{millivolt})/33.0{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel_g_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_g: millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    ode(g, time) = (g_infinity-g)/tau_g;
    g_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+66.0{millivolt})/6.6{millivolt}));
    tau_g = 8.0{millisecond}+32.0{millisecond}/(1.0{dimensionless}+exp((V+65.0{millivolt})/5.0{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005249
  def comp rapid_time_dependent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var i_Kr: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var g_Kr: milliS_per_microF {init: 0.035};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var E_Kr: millivolt;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Xr: dimensionless {priv: in};
    var Rr: dimensionless {priv: in};
    g_Kr = 0.02612{milliS_per_microF}*sqrt(Ko/5.4{micromolar});
    E_Kr = R*T/F*ln(Ko/Ki);
    i_Kr = g_Kr*Xr*Rr*(V-E_Kr);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005249
  def comp rapid_time_dependent_potassium_current_Xr_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var Xr: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org//
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var Xr_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var tau_Xr: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(Xr, time) = (Xr_infinity-Xr)/tau_Xr;
    Xr_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+50.0{millivolt})/7.5{millivolt}));
    tau_Xr = 1.0{dimensionless}/(0.00138{dimensionless}*(V+7.0{millivolt})/(1.0{dimensionless}-exp(-0.123{dimensionless}*(V+7.0{millivolt})))+0.00061{dimensionless}*(V+10.0{millivolt})/exp(0.145{dimensionless}*(V+10.0{millivolt})*0.145{dimensionless}-1.0{dimensionless}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005249
  def comp rapid_time_dependent_potassium_current_Rr_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var Rr: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    Rr = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+33.0{millivolt})/22.4{millivolt}));
  enddef;

  def comp slow_time_dependent_potassium_current as
    var i_Ks: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var g_Ks: milliS_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var E_Ks: millivolt;
    var p_Ca: dimensionless {init: 0.01833};
    var P_NaK: dimensionless {init: 0.01833};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Cai: micromolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Xs: dimensionless {priv: in};
    g_Ks = (0.057{dimensionless}+0.19{dimensionless})/(1.0{dimensionless}+exp((-7.2{micromolar}+p_Ca)/0.6{dimensionless}));
    p_Ca = -log(Cai)+3.0{dimensionless};
    E_Ks = R*T/F*ln((Ko+P_NaK*Nao)/(Ki+P_NaK*Nai));
    i_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005249
  def comp slow_time_dependent_potassium_current_Xs_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var Xs: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var tau_Xs: millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var Xs_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(Xs, time) = (Xs_infinity-Xs)/tau_Xs;
    Xs_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+(-1.5{millivolt}))/16.7{millivolt}));
    tau_Xs = 1.0{dimensionless}/(0.0000719{dimensionless}*(V+30.0{millivolt})/(1.0{dimensionless}-exp(-0.148{dimensionless}*(V+30.0{millivolt})))+0.000131{dimensionless}*(V+30.0{millivolt})/(exp(0.0687{dimensionless}*(V+30.0{millivolt}))-1.0{dimensionless}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp Na_Ca_exchanger as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var K_NaCa: microA_per_microF {init: 2600.0};
    var K_mNa: millimolar {init: 87.5};
    var K_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: millimolar {pub: in};
    var K_mCa: millimolar {pub: in};
    i_NaCa = K_NaCa*(1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless})))*(1.0{dimensionless}/(K_mCa+Cao))*(1.0{dimensionless}/(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V*(F/(R*T)))))*(exp(eta*V*(F/(R*T)))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V*(F/(R*T)))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005242
  // isVersionOf: http://identifiers.org/go/GO:0005241
  def comp time_independent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var i_K1: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var E_K1: millivolt {priv: out, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var g_K1: milliS_per_microF {init: 0.540};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var K1_infinity: dimensionless {priv: in};
    g_K1 = 0.75{milliS_per_microF}*sqrt(Ko/5.4{micromolar});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005242
  // isVersionOf: http://identifiers.org/go/GO:0005241
  def comp time_independent_potassium_current_K1_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var K1_infinity: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var alpha_K1: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var beta_K1: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var E_K1: millivolt {pub: in};
    alpha_K1 = 1.02{per_millisecond}/(1.0{dimensionless}+exp(0.2385{per_millivolt}*(V-E_K1-59.215{millivolt})));
    beta_K1 = (0.49124{per_millisecond}*exp((V+5.476{millivolt}-E_K1)/12.45{millivolt})+exp((V-(E_K1+594.31{millivolt}))/16.2{millivolt}))/(1.0{dimensionless}+exp(-0.5143{per_millivolt}*(V-(E_K1+4.753{millivolt}))));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005249
  def comp plateau_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/chebi/CHEBI:50510
    var i_Kp: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var E_Kp: millivolt;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var g_Kp: milliS_per_microF {init: 0.008};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var Kp: dimensionless;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_K1: millivolt {pub: in};
    E_Kp = E_K1;
    Kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0070588
  // isVersionOf: http://identifiers.org/go/GO:0015085
  // isVersionOf: http://identifiers.org/go/GO:0006816
  def comp sarcolemmal_calcium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var i_p_Ca: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var K_mpCa: micromolar {init: 0.5};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var I_pCa: microA_per_microF {init: 1.15};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    i_p_Ca = I_pCa*(Cai/(K_mpCa+Cai));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp sodium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Na_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_Nab: milliS_per_microF {init: 0.00141};
    var E_NaN: millivolt;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var E_Na: millivolt {pub: in};
    E_NaN = E_Na;
    i_Na_b = g_Nab*(V-E_NaN);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp calcium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Ca_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_Cab: milliS_per_microF {init: 0.003016};
    var E_CaN: millivolt;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: millimolar {pub: in};
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_CaN);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005391
  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0006815
  def comp sodium_potassium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var I_NaK: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var f_NaK: dimensionless;
    var K_mNai: millimolar {init: 10.0};
    var K_mKo: millimolar {init: 1.5};
    var sigma: dimensionless;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*(V*F/(R*T)))+0.0365{dimensionless}*sigma*exp(-(V*F/(R*T))));
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{dimensionless})-1.0{dimensionless});
    i_NaK = I_NaK*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+sqrt(pow(K_mNai/Nai, 3.0{dimensionless}))))*(Ko/(Ko+K_mKo));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005229
  def comp calcium_activated_current as
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var i_Cl_Ca: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var K_mCa: micromolar {init: 0.10, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var g_Cl: milliS_per_microF {init: 10.0};
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var E_Cl: millivolt;
    var Cai: micromolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_Cl_Ca = g_Cl*((V-E_Cl)/(1.0{dimensionless}+K_mCa/Cai));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_to: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var g_to: milliS_per_microF {init: 0.060};
    var E_K: millivolt;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_to: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_to: dimensionless {priv: in};
    i_to = g_to*X_to*Y_to*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_potassium_current_X_to_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_to: dimensionless {init: 0.00003742, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alpha_X_to: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var beta_X_to: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_X_to = 0.04561{per_millisecond}*exp(0.03577{dimensionless}*V);
    beta_X_to = 0.0989{per_millisecond}*exp(-0.06237{dimensionless}*V);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_potassium_current_Y_to_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_to: dimensionless {init: 1.0, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alpha_Y_to: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var beta_Y_to: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_Y_to = 0.005415{per_millisecond}*exp(-((V+33.5{millivolt})/5.0{millivolt})/(1.0{dimensionless}+0.051335{dimensionless}*exp(-((V+33.5{millivolt})/5.0{millivolt}))));
    beta_Y_to = 0.005415{per_millisecond}*exp((V+33.5{millivolt})/5.0{millivolt}/(1.0{dimensionless}+0.051335{dimensionless}*exp((V+33.5{millivolt})/5.0{millivolt})));
  enddef;

  def comp Ca_buffers_in_the_myoplasm as
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var K_mTRPN: micromolar {init: 0.5};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var K_mCMDN: micromolar {init: 2.38};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var TRPN_max: micromolar {init: 70.0};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var CMDN_max: micromolar {init: 50.0};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var TRPN_buff: micromolar;
    var CMDN_buff: micromolar;
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    TRPN_buff = TRPN_max*(Cai/(Cai+K_mTRPN));
    CMDN_buff = CMDN_max*(Cai/(Cai+K_mCMDN));
  enddef;

  def comp calcium_fluxes_in_the_SR as
    var i_rel: millimolar_per_millisecond {pub: out};
    var i_up: millimolar_per_millisecond {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_leak: millimolar_per_millisecond {pub: out};
    var i_tr: millimolar_per_millisecond {pub: out};
    var G_rel: per_millisecond;
    var G_rel_max: per_millisecond;
    var tau_on: millisecond {init: 2.0};
    var tau_off: millisecond {init: 2.0};
    var tau_tr: millisecond {init: 180.0};
    var t: millisecond {init: 0.0};
    var K_mrel: micromolar {init: 0.8};
    var delta_Ca_i2: micromolar;
    var delta_Ca_ith: micromolar {init: 0.18};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var CSQN_buff: millimolar;
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var CSQN_max: millimolar {init: 10.0};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var CSQN_th: millimolar {init: 0.7};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var K_mCSQN: millimolar {init: 0.8};
    var K_mup: micromolar {init: 0.92};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var K_leak: per_millisecond;
    var I_up: millimolar_per_millisecond {init: 0.005};
    var Ca_NSR_max: millimolar {init: 0.15};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    i_rel = G_rel*(Ca_JSR-Cai);
    G_rel = G_rel_max*((delta_Ca_i2-delta_Ca_ith)/(K_mrel+delta_Ca_i2-delta_Ca_ith))*(1.0{dimensionless}-exp(-(t/tau_on)))*exp(-(t/tau_off));
    G_rel_max = sel
      case delta_Ca_i2 < delta_Ca_ith:
        0.0{per_millisecond};
      otherwise:
        60.0{per_millisecond};
    endsel;
    CSQN_buff = CSQN_max*(Ca_JSR/(Ca_JSR+K_mCSQN));
    i_up = I_up*(Cai/(Cai+K_mup));
    i_leak = K_leak*Ca_NSR;
    K_leak = I_up/Ca_NSR_max;
    i_tr = (Ca_NSR-Ca_JSR)/tau_tr;
  enddef;

  def comp ionic_concentrations as
    var Nai: millimolar {init: 10.0, pub: out};
    var Nao: millimolar {init: 140.0, pub: out};
    var Cai: micromolar {init: 0.12, pub: out};
    var Cao: millimolar {init: 1.8, pub: out};
    var Ki: millimolar {init: 145.0, pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
    var Ca_JSR: millimolar {pub: out};
    var Ca_NSR: millimolar {init: 15.0, pub: out};
    var Ca_foot: micromolar;
    var A_cap: mm2 {init: 0.000153};
    var R_A_V: dimensionless;
    var V_myo: micro_litre;
    var delta_Ca: dimensionless;
    var delta_Ca_JSR: dimensionless;
    var V_cleft: micro_litre;
    var V_JSR: micro_litre;
    var V_NSR: micro_litre;
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_CaNa: microA_per_microF {pub: in};
    var i_Na_b: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_CaCa: microA_per_microF {pub: in};
    var i_Ca_T: microA_per_microF {pub: in};
    var i_CaK: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Ca_b: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kp: microA_per_microF {pub: in};
    var i_to: microA_per_microF {pub: in};
    var i_tr: millimolar_per_millisecond {pub: in};
    var i_rel: millimolar_per_millisecond {pub: in};
    var i_leak: millimolar_per_millisecond {pub: in};
    var i_up: millimolar_per_millisecond {pub: in};
    ode(Nai, time) = -(i_Na+i_CaNa+i_Na_b+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*(A_cap/(V_myo*F));
    ode(Cai, time) = (i_CaCa+i_p_Ca+i_Ca_b+i_Ca_T-i_NaCa)*(A_cap/(2.0{dimensionless}*V_myo*F))+i_rel*(V_JSR/V_myo)+(i_leak-i_up)*(V_NSR/V_myo);
    ode(Ki, time) = -(i_CaK+i_Kr+i_Ks+i_K1+i_Kp+i_to+(-(i_NaK*2.0{dimensionless})))*(A_cap/(V_myo*F));
    ode(Ko, time) = (i_CaK+i_Kr+i_Ks+i_K1+i_Kp+i_to+(-(i_NaK*2.0{dimensionless})))*(A_cap/(V_cleft*F));
    ode(Ca_JSR, time) = -(i_rel-i_tr*(V_NSR/V_JSR));
    ode(Ca_NSR, time) = -(i_leak+i_tr-i_up);
    ode(Ca_foot, time) = -i_CaCa*(A_cap/(2.0{dimensionless}*V_myo*F))*R_A_V;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f_Ca_gate;
      endcomp;
      comp T_type_Ca_channel incl
        comp T_type_Ca_channel_b_gate;
        comp T_type_Ca_channel_g_gate;
      endcomp;
      comp transient_outward_potassium_current incl
        comp transient_outward_potassium_current_X_to_gate;
        comp transient_outward_potassium_current_Y_to_gate;
      endcomp;
      comp rapid_time_dependent_potassium_current incl
        comp rapid_time_dependent_potassium_current_Xr_gate;
        comp rapid_time_dependent_potassium_current_Rr_gate;
      endcomp;
      comp slow_time_dependent_potassium_current incl
        comp slow_time_dependent_potassium_current_Xs_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp plateau_potassium_current;
      comp sarcolemmal_calcium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp calcium_activated_current;
      comp transient_outward_potassium_current;
      comp ionic_concentrations;
      comp Ca_buffers_in_the_myoplasm;
      comp calcium_fluxes_in_the_SR;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_b_gate;
      comp T_type_Ca_channel_g_gate;
    endcomp;
    comp transient_outward_potassium_current incl
      comp transient_outward_potassium_current_X_to_gate;
      comp transient_outward_potassium_current_Y_to_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_Xr_gate;
      comp rapid_time_dependent_potassium_current_Rr_gate;
    endcomp;
    comp slow_time_dependent_potassium_current incl
      comp slow_time_dependent_potassium_current_Xs_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  // "Time" is passed from the "environment" component into the
  // "membrane" and current components.
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between Ca_buffers_in_the_myoplasm and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes_in_the_SR and environment for
    vars time and time;
  enddef;
  // Several variables are passed between the "membrane" and its sub-components.
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars V and V;
    vars i_Ca_T and i_Ca_T;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_activated_current for
    vars V and V;
    vars i_Cl_Ca and i_Cl_Ca;
  enddef;
  def map between membrane and transient_outward_potassium_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  // Several variables are passed between the sibling components.
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_CaCa and i_CaCa;
    vars i_CaNa and i_CaNa;
    vars i_CaK and i_CaK;
  enddef;
  def map between T_type_Ca_channel and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between rapid_time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_Kr and i_Kr;
  enddef;
  def map between slow_time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Cai and Cai;
    vars i_Ks and i_Ks;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Cai and Cai;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and calcium_activated_current for
    vars K_mCa and K_mCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and ionic_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between calcium_activated_current and ionic_concentrations for
    vars Cai and Cai;
  enddef;
  def map between transient_outward_potassium_current and ionic_concentrations for
    vars i_to and i_to;
  enddef;
  def map between Ca_buffers_in_the_myoplasm and ionic_concentrations for
    vars Cai and Cai;
  enddef;
  def map between calcium_fluxes_in_the_SR and ionic_concentrations for
    vars i_rel and i_rel;
    vars i_tr and i_tr;
    vars i_leak and i_leak;
    vars i_up and i_up;
    vars Cai and Cai;
    vars Ca_JSR and Ca_JSR;
    vars Ca_NSR and Ca_NSR;
  enddef;
  //
  // Various variables are passed between parent components and their
  // encapsulated gates.
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_b_gate for
    vars b and b;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_g_gate for
    vars g and g;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr_gate for
    vars Xr and Xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Rr_gate for
    vars Rr and Rr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars time and time;
    vars V and V;
    vars E_K1 and E_K1;
    vars K1_infinity and K1_infinity;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_X_to_gate for
    vars X_to and X_to;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_Y_to_gate for
    vars Y_to and Y_to;
    vars time and time;
    vars V and V;
  enddef;
enddef;
// rdf:#297b268b-9905-4f21-bb0a-da6bfee0b6ea
// value: <apply xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" cmeta:id="calcium_overload"><eq/> <ci> G_rel </ci> <apply><times/> <ci> G_rel_max </ci> <apply><minus/> <cn cellml:units="dimensionless"> 1.0 </cn> <apply><exp/> <apply><minus/> <apply><divide/> <ci> t </ci> <ci> tau_on </ci> </apply> </apply> </apply> </apply> <apply><exp/> <apply><minus/> <apply><divide/> <ci> t </ci> <ci> tau_off </ci> </apply> </apply> </apply> </apply> </apply> <apply xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/1.0#"><eq/> <ci> G_rel_max </ci> <piecewise> <piece> <cn cellml:units="per_millisecond"> 0.0 </cn> <apply><lt/> <ci> CSQN_buff </ci> <ci> CSQN_th </ci> </apply> </piece> <otherwise> <cn cellml:units="per_millisecond"> 4.0 </cn> </otherwise> </piecewise> </apply>
// value: When the cell is under calcium-overload conditions, the equations for G-rel and G-rel max are altered. Rather than include these equations as part of the CellML model itself, they are presented below within the metadata. This is because the calcium-overload conditions are poorly defined and most modelers will be interested in a cell under normal calcium conditions.
