//  FILE : MNT_purkinje_fibre_model_1975.xml
//
// CREATED : September 2001
//
// LAST MODIFIED : 5th April 2003
//
// AUTHOR : Catherine Lloyd
//          Department of Engineering Science
//          The University of Auckland
//
// MODEL STATUS : This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16
// January 2002.
//
// DESCRIPTION : This file contains a CellML description of cardiac action
// potentials in purkinje fibres, based on the McAllister-Noble-Tsien model, 1975.
//
// CHANGES:
//   19/10/2001 - CML - Removed document type definition as this is declared as
//                      optional according to the W3C recommendation.
//   24/10/2001 - CML - Made changes to some of the metadata, bringing them up to
//                      date with the most recent working draft (26th September) of
//                      the Metadata specification.
//   10/12/2001 - CML - Changed equations after checking with the mathml validator.
//   03/01/2002 - CML - Altered parent-child relationships as x1 and x2 were made
//                      to be gates of the plateau potassium currents.
//   20/01/2002 - AAC - Updated metadata to conform to the 16/01/2002 CellML
//                      Metadata Specification.
//   28/02/2002 - CML - Corrected units.
//   19/07/2002 - CML - Added more metadata.
//   05/04/2003 - AAC - Changed the model name so the model loads in the database
//                      easier.
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit The Bioengineering Research Group
// created: W3CDTF 2001-09-27
// modification: Changed some units and added a stimulus current.; Family Nickerson; Given David; Other P; W3CDTF 2003-10-13
// modification: Changed the model name so the model loads in the database easier.; Family Cuellar; Given Autumn; Other A; W3CDTF 2003-04-05
// modification: Added more metadata.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-07-19
// modification: Corrected units; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-02-28
// modification: Updated metadata to conform to the 16/01/2002 CellML Metadata 1.0 Specification.; Family Cuellar; Given Autumn; Other A.; W3CDTF 2002-01-20
// modification: Altered parent-child relationships as x1 and x2 were made to be gates of the plateau potassium currents.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-01-03
// modification: Changed equations after checking with the mathml validator.; Family Lloyd; Given Catherine; Other May; W3CDTF 2001-12-10
// modification: Made changes to some of the metadata, bringing them up to date with the most recent working draft (26th September) of the Metadata Specification.; Family Lloyd; Given Catherine; Other May; W3CDTF 2001-10-24
// modification: Removed document type definition as this is declared as optional according to the W3C recommendation.; Family Lloyd; Given Catherine; Other May; W3CDTF 2001-10-19
// publisher: The University of Auckland, Bioengineering Research Group
// title: The McAllister-Noble-Tsien Model of Cardiac Action Potentials in Purkinje fibres, 1975
// comment: This is the CellML description of McAllister, Noble and Tsien's mathematical model of cardiac action potentials of Purkinje fibres. It describes transmembrane ionic currents in terms of Hodgkin-Huxley type equations. It is a significant development of the Noble (1962) model as more currents are added based on new experimental data.; FN Catherine Lloyd
// bio_entity: Purkinje Fibre
// reference: Pubmed_id 1185607; Family McAllister; Given R; Other E; Family Noble; Given Denis; Family Tsien; Given R; Other W; title Reconstruction of the electrical activity of cardiac purkinje fibres; W3CDTF 1975-09; title Journal of Physiology; volume 251; first_page 1; last_page 59
def model mcallister_noble_tsien_model_1975 as
  // Below, are defined some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mS_per_mm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit uA_per_mm2 as
    unit ampere {pref: micro};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit concentration_units as
    unit mole {pref: nano};
    unit metre {expo: -3, pref: milli};
  enddef;

  def comp interface as
    var time: ms {priv: out, pub: in};
    var I_stim: uA_per_mm2 {priv: out, pub: in};
    var V: mV {priv: in, pub: out};
  enddef;
  // The "membrane" component is really the `root' node of our model.
  // It defines the action potential variable "V" among other things.

  // comment: The main component of the model, containing the definition of the model's action potential.
  def comp membrane as
    // These variables are defined here and used in other components.
    var V: mV {init: -80.0, pub: out};
    // These variables are defined here and only used internally.
    var C: uF_per_mm2 {init: 0.1};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_si: uA_per_mm2 {pub: in};
    var i_K2: uA_per_mm2 {pub: in};
    var i_x1: uA_per_mm2 {pub: in};
    var i_x2: uA_per_mm2 {pub: in};
    var i_qr: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_Cl_b: uA_per_mm2 {pub: in};
    var I_stim: uA_per_mm2 {pub: in};
    // The membrane voltage (V) is calculated as an ordinary
    // differential equation in terms of the currents.
    // comment: The kinetics of the transmembrane potential, defined as the sum of the trans-sarcolemmal currents and an applied stimulus current.
    ode(V, time) = (I_stim-(i_Na+i_si+i_K2+i_x1+i_x2+i_qr+i_K1+i_Na_b+i_Cl_b))/C;
  enddef;
  //
  // The "fast_sodium_current" component contains the differential equations
  // governing the influx of sodium ions through the cell surface membrane
  // into the cell.

  // comment: The fast sodium current, primarily responsible for the upstroke of the action potential.
  def comp fast_sodium_current as
    // These variables are defined here and used in other components.
    var i_Na: uA_per_mm2 {pub: out};
    var E_Na: mV {init: 40.0, pub: out};
    // This variable is defined here and only used internally.
    var g_Na: mS_per_mm2 {init: 1.5};
    // Time is imported from the "interface", and membrane potential is
    // imported from the "membrane" component.  These variables are used in the
    // "sodium_current" parent component, which also acts as an interface,
    // passing the variables to its encapsulated gate components.
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    // These variables are imported from encapsulated components.
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*(V-E_Na);
  enddef;
  // The "fast_sodium_current_m_gate" is the activation m gate encapsulated
  // inside the "fast sodium current" component.

  // comment: The voltage-dependent activation gate for the fast sodium channel - the m gate.
  def comp fast_sodium_current_m_gate as
    // This variable is defined here and used in other components.
    var m: dimensionless {init: 0.019, pub: out};
    // These variables are defined here and only used internally.
    var alpha_m: per_ms;
    var beta_m: per_ms;
    // These variables are imported from the "interface" and the "membrane" via
    // the "fast_sodium_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_m = (V+47.0{mV})/(1.0{dimensionless}-exp(-(V+47.0{mV})/10.0{mV}));
    beta_m = 40.0{per_ms}*exp(-(V+72.0{mV})/17.86{mV});
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;
  // The "fast_sodium_current_h_gate" component is the inactivation h gate
  // encapsulated in the "fast sodium current" component.

  // comment: The voltage-dependent inactivation gate for the fast sodium channel - the h gate.
  def comp fast_sodium_current_h_gate as
    // This variable is defined here and used in other components.
    var h: dimensionless {init: 0.863, pub: out};
    // These variables are defined here and only used internally.
    var alpha_h: per_ms;
    var beta_h: per_ms;
    // These variables are imported from the "interface" and the "membrane" via
    // the "fast_sodium_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_h = 0.0085{per_ms}*exp(-(V+71.0{mV})/5.435{mV});
    beta_h = 2.5{per_ms}/(exp(-(V+10.0{mV})/12.2{mV})+1.0{dimensionless});
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  // comment: The secondary (or sometimes slow) inward current activates much more slowly than the sodium current and it is responsible for holding up the plateau after the initial activation and for controlling the duration of the action potential. At the time of this model, it was assumed that the flux of both Na and Ca ions through the cell membrane was responsible for this current. This channel has an activation gate d and an inactivation gate f. It was observed in earlier experiments that a portion of this current would not completely inactivate. This is represented by the second term in the secondary current equation which has an activation variable d1, but no deactivation variable.
  def comp secondary_inward_current as
    // This variable is defined here and used in other components.
    var i_si: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_si: mS_per_mm2 {init: 0.008};
    var g_si_: mS_per_mm2 {init: 0.0004};
    var E_si: mV {init: 70.0};
    // Time is imported from the "interface", and membrane potential is
    // imported from the "membrane" component.  These variables are used in the
    // "secondary_inward_current" parent component, which also acts as an
    // interface, passing the variables to its encapsulated gate component.
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    // These variables are imported from encapsulated components.
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var d1: dimensionless {priv: in};
    i_si = g_si*d*f*(V-E_si)+g_si_*d1*(V-E_si);
  enddef;
  // The "secondary_inward_current_d_gate" component is the d gate encapsulated
  // in the "secondary inward current" component.

  // comment: The voltage-dependent activation gate for the secondary inward current - the d gate.
  def comp secondary_inward_current_d_gate as
    // This variable is defined here and used in other components.
    var d: dimensionless {init: 0.002, pub: out};
    // These variables are defined here and only used internally.
    var alpha_d: per_ms;
    var beta_d: per_ms;
    // These variables are imported from the "interface" and the "membrane" via
    // the "slow_inward_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_d = (V+40.0{mV})/(500.0{mV}*(1.0{ms}-exp(-(V+40.0{mV})/10.0{mV})));
    beta_d = 0.02{per_ms}*exp(-(V+40.0{mV})/11.26{mV});
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;
  // The "secondary_inward_current_f_gate" component is the f gate encapsulated
  // in the "secondary inward current" component.

  // comment: The voltage-dependent inactivation gate for the secondary inward current - the f gate.
  def comp secondary_inward_current_f_gate as
    // This variable is defined here and used in other components.
    var f: dimensionless {init: 0.794, pub: out};
    // These variables are defined here and only used internally.
    var alpha_f: per_ms;
    var beta_f: per_ms;
    // These variables are imported from parent and sibling components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_f = 0.000987{per_ms}*exp(-(V+60.0{mV})/25.0{mV});
    beta_f = 0.02{per_ms}/(exp(-(V+26.0{mV})/11.5{mV})+1.0{dimensionless});
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
  enddef;
  // The "secondary_inward_current_d1_gate" component is the d1 gate encapsulated
  // in the "secondary inward current" component.

  // comment: The activation variable for the slow component of the secondard inward current - the d1 gate (corresponds to the d' variable in the MNT paper.
  def comp secondary_inward_current_d1_gate as
    // This variable is defined here and used in other components.
    var d1: dimensionless {pub: out};
    // These variables are imported from other components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    d1 = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+40.0{mV})/6.667{mV}));
  enddef;
  // The pacemaker potassium current describes an outward flux of potassium ions
  // in terms of a single gate variable, s.

  // comment: A potassium current activated over the "pace-maker" range of potentials. Provides the pacemaker function of the model.
  def comp pacemaker_potassium_current as
    // These variables are defined here and used in other components.
    var i_K2: uA_per_mm2 {pub: out};
    var I_K2: uA_per_mm2 {pub: out};
    // This variable is defined here and only used internally.
    var E_K: mV {init: -110.0};
    // These variables are imported from parent and sibling components.
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    // These variables are imported from encapsulated components.
    var s: dimensionless {priv: in};
    i_K2 = I_K2*s;
    I_K2 = 0.028{uA_per_mm2}*(exp((V-E_K)/25.0{mV})-1.0{dimensionless})/(exp((V+60.0{mV})/12.5{mV})+exp((V+60.0{mV})/25.0{mV}));
  enddef;
  // The s gate component is encapsulated within the pacemaker potassium current.

  // comment: The voltage-dependent gating variable for the pacemaker current - the s gate.
  def comp pacemaker_potassium_current_s_gate as
    // This variable is defined here and used in other components.
    var s: dimensionless {init: 0.763, pub: out};
    // These variables are defined here and only used internally.
    var alpha_s: per_ms;
    var beta_s: per_ms;
    var E_s: mV {init: -52.0};
    // These variables are imported from parent and sibling components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_s = 0.001{per_ms}*(V-E_s)/(1.0{dimensionless}-exp(-(V-E_s)/5.0{mV}));
    beta_s = 0.00005{per_ms}*exp(-(V-E_s)/15.0{mV});
    ode(s, time) = alpha_s*(1.0{dimensionless}-s)-beta_s*s;
  enddef;
  // The equations for the plateau potassium currents (x1 and x2) are based on
  // experiments performed by Noble and Tsien (1969) which showed that additional
  // potassium currents were activated in the plateau range of potentials.  They
  // appear to play an essential role in membrane repolarisation.

  // comment: The equations for the plateau potassium currents (x1 and x2) are based on experiments performed by Noble and Tsien (1969) which showed that additional potassium currents were activated in the plateau range of potentials. They appear to play an essential role in membrane repolarisation.
  def comp plateau_potassium_current1 as
    // This variable is defined here and used in other components.
    var i_x1: uA_per_mm2 {pub: out};
    // This variable is defined here and only used internally.
    var I_x1: uA_per_mm2;
    // These variables are imported from parent and sibling components.
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    // This variable is imported from an encapsulated component.
    var x1: dimensionless {priv: in};
    i_x1 = x1*I_x1;
    I_x1 = 0.012{uA_per_mm2}*(exp((V+95.0{mV})/25.0{mV})-1.0{dimensionless})/exp((V+45.0{mV})/25.0{mV});
  enddef;
  // The x1 gate component is encapsulated within the plateau potassium current
  // 1.

  // comment: The voltage-dependent gating variable for the first plateau potassium current - the x1 gate.
  def comp plateau_potassium_current1_x1_gate as
    // This variable is defined here and used in other components.
    var x1: dimensionless {init: 0.051, pub: out};
    // These variables are defined here and only used internally.
    var alpha_x1: per_ms;
    var beta_x1: per_ms;
    // These variables are imported from parent and sibling components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_x1 = 5e-4{per_ms}*exp((V+50.0{mV})/12.1{mV})/(1.0{dimensionless}+exp((V+50.0{mV})/17.5{mV}));
    beta_x1 = 0.0013{per_ms}*exp(-(V+20.0{mV})/16.67{mV})/(1.0{dimensionless}+exp(-(V+20.0{mV})/20.0{mV}));
    ode(x1, time) = alpha_x1*(1.0{dimensionless}-x1)-beta_x1*x1;
  enddef;

  // comment: The second of the plateau potassium currents.
  def comp plateau_potassium_current2 as
    // This variable is defined here and used in other components.
    var i_x2: uA_per_mm2 {pub: out};
    // This variable is defined here and only used internally.
    var I_x2: uA_per_mm2;
    // These variables are imported from parent and sibling components.
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    // This variable is imported from an encapsulated component.
    var x2: dimensionless {priv: in};
    i_x2 = x2*I_x2;
    I_x2 = 0.25{uA_per_mm2}+0.00385{mS_per_mm2}*V;
  enddef;
  // The x2 gate component is encapsulated within the plateau potassium current
  // 2.

  // comment: The gating variable for the second plateau potassium current - the x2 gate.
  def comp plateau_potassium_current2_x2_gate as
    // This variable is defined here and used in other components.
    var x2: dimensionless {init: 0.006, pub: out};
    // These variables are defined here and only used internally.
    var alpha_x2: per_ms;
    var beta_x2: per_ms;
    // These variables are imported from parent and sibling components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_x2 = 0.000127{per_ms}*1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+19.0{mV})/5.0{mV}));
    beta_x2 = 0.0003{per_ms}*exp(-(V+20.0{mV})/16.67{mV})/(1.0{dimensionless}+exp(-(V+20.0{mV})/25.0{mV}));
    ode(x2, time) = alpha_x2*(1.0{dimensionless}-x2)-beta_x2*x2;
  enddef;

  // comment: The transient chloride current (i_qr) is responsible for the rapid repolarisation from the peak of the depolarisation spike of the action potential, to the start of the plateau. The current has 2 gating variables, q and r.
  def comp transient_chloride_current as
    // These variables are defined here and used in other components.
    var i_qr: uA_per_mm2 {pub: out};
    var E_Cl: mV {init: -70.0, pub: out};
    // This variable is defined here and only used internally.
    var g_qr: mS_per_mm2 {init: 0.05};
    // These variables are imported from parent and sibling components.
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    // These variables are imported from encapsulated components.
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_qr = g_qr*q*r*(V-E_Cl);
  enddef;
  // The encapsulated q gate.

  // comment: The voltage-dependent activation gate for the transient chloride channel - the q gate.
  def comp transient_chloride_current_q_gate as
    // This variable is defined here and used in other components.
    var q: dimensionless {init: 0.0, pub: out};
    // These variables are defined here and only used internally.
    var alpha_q: per_ms;
    var beta_q: per_ms;
    // These variables are imported from parent and sibling components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_q = 0.008{per_mV_ms}*V/(1.0{dimensionless}-exp(-V/10.0{mV}));
    beta_q = 0.08{per_ms}*exp(-V/11.26{mV});
    ode(q, time) = alpha_q*(1.0{dimensionless}-q)-beta_q*q;
  enddef;
  // The encapsualted r gate.

  // comment: The voltage-dependent inactivation gate for the transient chloride current - the r gate.
  def comp transient_chloride_current_r_gate as
    // This variable is defined here and used in other components.
    var r: dimensionless {init: 0.126, pub: out};
    // These variables are defined here and only used internally.
    var alpha_r: per_ms;
    var beta_r: per_ms;
    // These variables are imported from parent and sibling components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_r = 0.00018{per_ms}*exp(-(V+80{mV})/25.0{mV});
    beta_r = 0.02{per_ms}/(exp(-(V+26{mV})/11.5{mV})+1.0{dimensionless});
    ode(r, time) = alpha_r*(1.0{dimensionless}-r)-beta_r*r;
  enddef;
  // The outward time-independent (or background) ionic current is carried
  // predominately by potassium ions and is represented by i_K1.

  // comment: The time-independent (background) current carried by potassium ions.
  def comp time_independent_outward_current as
    // This variable is defined here and used in other components.
    var i_K1: uA_per_mm2 {pub: out};
    // This variable is defined here and only used internally.
    var E_K1: mV {init: -30.0};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var I_K2: uA_per_mm2 {pub: in};
    i_K1 = I_K2/2.8{dimensionless}+0.002{uA_per_mm2}*(V-E_K1)/(1.0{dimensionless}-exp(-(V-E_K1)/25.0{mV}));
  enddef;
  // The "sodium_background_current" is a time-independent diffusion of Na ions
  // down their electrochemical gradient, through the cell surface membrane into
  // the cytosol.

  // comment: The sodium background current is a time-independent diffusion of Na ions down their electrochemical gradient, through the cell surface membrane into the cytosol.
  def comp sodium_background_current as
    // This variable is defined here and used in other components.
    var i_Na_b: uA_per_mm2 {pub: out};
    // This variable is defined here and only used internally.
    var g_Nab: mS_per_mm2 {init: 0.00105};
    // Time and membrane potential are imported from the "interface" and the
    // "membrane" components.  The reversal potential is imported from the
    // "fast_sodium_current" component.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;
  // The "chloride_background_current" contributes to maintaining the plateau and
  // helps to determine the action potential duration.

  // comment: The chloride background current contributes to maintaining the plateau and helps to determine the action potential duration.
  def comp chloride_background_current as
    // This variable is defined here and used in other components.
    var i_Cl_b: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_Clb: mS_per_mm2 {init: 0.0001};
    // Time and memebrane potential are imported from the "interface" and the
    // "membrane" components.  The reversal potential is imported from the
    // "transient_chloride_current" component.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Cl: mV {pub: in};
    i_Cl_b = g_Clb*(V-E_Cl);
  enddef;
  // The following <group> element specifies how the components representing
  // activation and inactivation gates are encapsulated inside their parent
  // currents.

  def group as encapsulation for
    comp interface incl
      comp membrane;
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp secondary_inward_current incl
        comp secondary_inward_current_d_gate;
        comp secondary_inward_current_f_gate;
        comp secondary_inward_current_d1_gate;
      endcomp;
      comp pacemaker_potassium_current incl
        comp pacemaker_potassium_current_s_gate;
      endcomp;
      comp transient_chloride_current incl
        comp transient_chloride_current_q_gate;
        comp transient_chloride_current_r_gate;
      endcomp;
      comp plateau_potassium_current1 incl
        comp plateau_potassium_current1_x1_gate;
      endcomp;
      comp plateau_potassium_current2 incl
        comp plateau_potassium_current2_x2_gate;
      endcomp;
      comp time_independent_outward_current;
      comp sodium_background_current;
      comp chloride_background_current;
    endcomp;
  enddef;
  // "time" is passed from the "interface" component into the
  // "membrane" and current components.
  def map between membrane and interface for
    vars time and time;
    vars I_stim and I_stim;
    vars V and V;
  enddef;
  def map between fast_sodium_current and interface for
    vars time and time;
  enddef;
  def map between secondary_inward_current and interface for
    vars time and time;
  enddef;
  def map between pacemaker_potassium_current and interface for
    vars time and time;
  enddef;
  def map between plateau_potassium_current1 and interface for
    vars time and time;
  enddef;
  def map between plateau_potassium_current2 and interface for
    vars time and time;
  enddef;
  def map between transient_chloride_current and interface for
    vars time and time;
  enddef;
  def map between time_independent_outward_current and interface for
    vars time and time;
  enddef;
  def map between sodium_background_current and interface for
    vars time and time;
  enddef;
  def map between chloride_background_current and interface for
    vars time and time;
  enddef;
  // Several variables are passed between the "membrane" and its sub-components.
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between secondary_inward_current and membrane for
    vars V and V;
    vars i_si and i_si;
  enddef;
  def map between pacemaker_potassium_current and membrane for
    vars V and V;
    vars i_K2 and i_K2;
  enddef;
  def map between plateau_potassium_current1 and membrane for
    vars V and V;
    vars i_x1 and i_x1;
  enddef;
  def map between plateau_potassium_current2 and membrane for
    vars V and V;
    vars i_x2 and i_x2;
  enddef;
  def map between transient_chloride_current and membrane for
    vars V and V;
    vars i_qr and i_qr;
  enddef;
  def map between time_independent_outward_current and membrane for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_background_current and membrane for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between chloride_background_current and membrane for
    vars V and V;
    vars i_Cl_b and i_Cl_b;
  enddef;
  // A few variables are passed between the other components.
  def map between sodium_background_current and fast_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between time_independent_outward_current and pacemaker_potassium_current for
    vars I_K2 and I_K2;
  enddef;
  def map between transient_chloride_current and chloride_background_current for
    vars E_Cl and E_Cl;
  enddef;
  // Several variables are passed between parent components and their
  // encapsulated gates.
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between secondary_inward_current and secondary_inward_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between secondary_inward_current and secondary_inward_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between secondary_inward_current and secondary_inward_current_d1_gate for
    vars d1 and d1;
    vars time and time;
    vars V and V;
  enddef;
  def map between pacemaker_potassium_current and pacemaker_potassium_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_chloride_current and transient_chloride_current_q_gate for
    vars q and q;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_chloride_current and transient_chloride_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between plateau_potassium_current1 and plateau_potassium_current1_x1_gate for
    vars x1 and x1;
    vars time and time;
    vars V and V;
  enddef;
  def map between plateau_potassium_current2 and plateau_potassium_current2_x2_gate for
    vars x2 and x2;
    vars time and time;
    vars V and V;
  enddef;
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The Publisher metadata.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "MNT_purkinje_fibre_model_1975", which is
  // declared on the <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  //
  // The CellML Metadata Specification recommends that bibliographic metadata
  // is used to provide information about the original model reference.  The
  // "identifier" attribute on the "BibliographicReference" class provides an
  // elegant way to identify a cited reference using a database identifier            such as Pubmed.  All associated data such as author, journal title,
  // date, etc can be looked up on the database.
enddef;
// #i_Na_calculation_eq
// comment: Calculation of the fast sodium current.
// #alpha_m_calculation_eq
// comment: The opening rate of the m gate.
// #beta_m_calculation_eq
// comment: The closing rate of the m gate.
// #dm_dt_eq
// comment: The kinetics of the m gate.
// #alpha_h_calculation_eq
// comment: The opening rate of the h gate.
// #beta_h_calculation_eq
// comment: The closing rate of the h gate.
// #dh_dt_eq
// comment: The kinetics of the h gate.
// #i_si_calculation_eq
// comment: Calculation of the second inward current.
// #alpha_d_calculation_eq
// comment: The opening rate of the d gate.
// #beta_d_calculation_eq
// comment: The closing rate of the d gate.
// #dd_dt_eq
// comment: The kinetics of the d gate.
// #alpha_f_calculation_eq
// comment: The opening rate of the f gate.
// #beta_f_calculation_eq
// comment: The closing rate of the f gate.
// #df_dt_eq
// comment: The kinetics of the f gate.
// #d1_calculation_eq
// comment: Calculation of the activation variable d1.
// #i_K2_calculation_eq
// comment: Calculation of the pacemaker current.
// #I_K2_max_calculation_eq
// comment: The maximal pacemaker current.
// #alpha_s_calculation_eq
// comment: The opening rate of the s gate.
// #beta_s_calculation_eq
// comment: The closing rate of the s gate.
// #ds_dt_eq
// comment: The kinetics of the s gate.
// #i_x1_calculation_eq
// comment: Calculation of the first plateau potassium current.
// #I_x1_max_calculation_eq
// comment: Calculation of the maximal first plateau potassium current.
// #alpha_x1_calculation_eq
// comment: The opening rate of the x1 gate.
// #beta_x1_calculation_eq
// comment: The closing rate of the x1 gate.
// #dx1_dt_eq
// comment: The kinetics of the x1 gate.
// #i_x2_calculation_eq
// comment: Calculation of the second plateau potassium current.
// #I_x2_max_calculation_eq
// comment: The linear maximal second plateau potassium current.
// #alpha_x2_calculation_eq
// comment: The opening rate for the x2 gate.
// #beta_x2_calculation_eq
// comment: The closing rate for the x2 gate.
// #dx2_dt_eq
// comment: The kinetics of the x2 gate.
// #i_qr_calculation_eq
// comment: Calculation of the transient chloride current.
// #alpha_q_calculation_eq
// comment: The opening rate for the q gate.
// #beta_q_calculation_eq
// comment: The closing rate for the q gate.
// #dq_dt_eq
// comment: The kinetics of the q gate.
// #alpha_r_calculation_eq
// comment: The opening rate for the r gate.
// #beta_r_calculation_eq
// comment: The closing rate for the r gate.
// #dr_dt_eq
// comment: The kinetics of the r gate.
// #i_K1_calculation_eq
// comment: Calculation of the time-independent potassium current.
// #i_Na_b_calculation_eq
// comment: Calculation of the sodium background current.
// #i_Cl_b_calculation_eq
// comment: Calculation of the background chloride current.
