//  FILE : DFN_purkinje_fibre_model_1985.xml
//
// CREATED : September 2001
//
// LAST MODIFIED : 5th April 2003
//
// AUTHOR : Catherine Lloyd
//          Department of Engineering Science
//          The University of Auckland
//
// MODEL STATUS : This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th January 2002.
//
// DESCRIPTION : This file contains a CellML description of cardiac action
// potentials in purkinje fibres, based on the Di Francesco-Noble model, 1985.
//
// CHANGES:
//   19/10/2001 - CML - Removed document type definition as this is declared as
//                      optional according to the W3C recommendation.
//   24/10/2001 - CML - Made changes to some of the metadata, bringing them up to
//                      date with the most recent working draft (26th September) of
//                      the Metadata specification.
//   07/12/2001 - CML - Changed equations after using mathml validator.
//   03/01/2002 - CML - Created two extra components for extracellular sodium and
//                      extracellular calcium concentrations.  Then changed the Nao
//                      and Cao variable public interfaces and the connections
//                      between components appropriately.
//   21/01/2002 - AAC - Updated metadata to conform with the 16/1/02 CellML
//                      Metadata 1.0 Specification.
//   25/02/2002 - CML - Corrected several equations.
//   06/05/2002 - CML - Added some initial values.
//   19/07/2002 - CML - Added more metadata.
//   05/04/2003 - AAC - Changed the model name so the model loads in the database
//                      easier.
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit The Bioengineering Research Group
// created: W3CDTF 2001-09-28
// modification: Getting the model solving and correcting a bunch of errors and fixing up the units and moving everything to "per-unit-area" type equations.; Family Nickerson; Given David; Other P; W3CDTF 2003-10-28
// modification: Changed the model name so the model loads in the database easier.; Family Cuellar; Given Autumn; Other A; W3CDTF 2003-04-05
// modification: Added more metadata.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-07-19
// modification: Added some initial values from Penny Noble's documentation.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-05-06
// modification: Corrected several equations.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-02-25
// modification: Updated metadata to conform to the 16/1/02 CellML Metadata 1.0 Specification.; Family Cuellar; Given Autumn; Other A.; W3CDTF 2002-01-21
// modification: Created two extra components for extracellular sodium and extracellular calcium concentrations. Then changed the Nao and Cao variable public interfaces and the connections between components appropriately.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-01-03
// modification: Changed equations after using mathml validator.; Family Lloyd; Given Catherine; Other May; W3CDTF 2001-12-07
// modification: Made changes to some of the metadata, bringing them up to date with the most recent working draft (26th September) of the Metadata Specification.; Family Lloyd; Given Catherine; Other May; W3CDTF 2001-10-24
// modification: Removed document type definition as this is declared as optional according to the W3C recommendation.; Family Lloyd; Given Catherine; Other May; W3CDTF 2001-10-19
// publisher: The University of Auckland, Bioengineering Research Group
// title: The Di Francesco-Noble Model of Cardiac Action Potentials in Purkinje fibres, 1985
// comment: This is the CellML description of Di Francesco and Noble's mathematical model of cardiac action potentials of Purkinje fibres. It is a significant development on the MNT model (1975), and it remains the most complete of all Purkinje fibre ionic current models to date. It is a complete replacement for the MNT model. In particular it considers changes in the interpretation of the i_K2 system, includes more accurate experimental data concerning the fast sodium current and it starts to account for fluctuations in ionic concentrations. In addition, a start is made on accounting for intracellular calcium movement between the sarcoplasmic reticulum and the myoplasm. Corrections for the model can be found in an appendix at the end of Earm & Noble, Proc. Roy. Soc. B, Vol 240(1297), 1990.; FN Catherine Lloyd
// bio_entity: Purkinje Fibre
// reference: Pubmed_id 2578676; Family DiFrancesco; Given D; Family Noble; Given D; title A model of cardiac electrical activity incorporating ionic pumps and concentration changes; W3CDTF 1985-01-10; title Philosophical Transactions of the Royal Society of London Series B; volume 307; first_page 353; last_page 398
// simulation: #simulation; multistepMethod bdf; iterationMethod functional; #time; maximumStepSize 0.01; tabulationStepSize 1.0; startingValue 0; endingValue 5000
def model difrancesco_noble_model_1985 as
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The Publisher metadata.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "DFN_purkinje_fibre_model_1985", which is
  // declared on the <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  //
  // The CellML Metadata Specification recommends that bibliographic metadata
  // is used to provide information about the original model reference.  The
  // "identifier" attribute on the "BibliographicReference" class provides an
  // elegant way to identify a cited reference using a database identifier            such as Pubmed.  All associated data such as author, journal title,
  // date, etc can be looked up on the database.
  // Below, are defined some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit mm as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_mm as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mS_per_mm2 as
    unit siemens {pref: milli};
    unit mm {expo: -2};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit mm {expo: -2};
  enddef;
  def unit uA_per_mm2 as
    unit ampere {pref: micro};
    unit mm {expo: -2};
  enddef;
  def unit uA_per_mm2_per_mM as
    unit ampere {pref: micro};
    unit mm {expo: -2};
    unit mM {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: nano};
    unit mm {expo: -3};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit per_ms_per_mM as
    unit ms {expo: -1};
    unit mM {expo: -1};
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit gas_constant_units as
    unit joule {pref: pico};
    unit mole {pref: nano, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit faradays_constant_units as
    unit coulomb {pref: nano};
    unit mole {pref: nano, expo: -1};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: ms {pub: out};
  enddef;
  // The "membrane" component is really the `root' node of our model.
  // It defines the action potential variable "V" among other things.

  // comment: The membrane component is the main component for this model, containing the differential equation for the transmembrane potential (the action potential).
  def comp membrane as
    // These variables are defined here and used in other components.
    var V: mV {pub: out, init: -87.0};
    var R: gas_constant_units {pub: out, init: 8314.41};
    var T: kelvin {pub: out, init: 310.0};
    var F: faradays_constant_units {pub: out, init: 96485.3};
    // This variable is defined here and only used internally.
    var C: uF_per_mm2 {init: 0.08466};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var i_f: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_to: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_si: uA_per_mm2 {pub: in};
    var I_stim: uA_per_mm2 {init: 0.0};
    // The membrane voltage (V) is calculated as an ordinary
    // differential equation in terms of the currents.
    // comment: The action potential equation consists of the sum of the trans-sarcolemmal currents plus an applied stimulus, which may be used to pace the cell model.
    ode(V, time) = (I_stim-(i_f+i_K+i_K1+i_to+i_Na_b+i_Ca_b+i_NaK+i_NaCa+i_Na+i_si))/C;
  enddef;
  // The hyperpolarising-activated current (i_f) is a Na-K current.

  // comment: The "funny" current - activated by hyperpolarisation rather than depolarisation, and consisting of sodium and potassium components.
  def comp hyperpolarising_activated_current as
    // These variables are defined here and used in other components.
    var i_f: uA_per_mm2 {pub: out};
    var i_fK: uA_per_mm2 {pub: out};
    var i_fNa: uA_per_mm2 {pub: out};
    var E_Na: mV {pub: out};
    var E_K: mV {pub: out};
    // These variables are defined here and only used internally.
    var g_f_Na: mS_per_mm2 {init: 3.39e-3};
    var g_f_K: mS_per_mm2 {init: 3.39e-3};
    var I_fK: uA_per_mm2;
    var I_fNa: uA_per_mm2;
    var Km_f: mM {init: 45.0};
    // These variables are imported from other components.
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Kc: mM {pub: in};
    var Ki: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    // These variables are imported from encapsulated components.
    var y: dimensionless {priv: in};
    // comment: The total current is simply the sum of the two component currents.
    i_f = i_fK+i_fNa;
    i_fK = y*I_fK;
    i_fNa = y*I_fNa;
    // comment: The maximal potassium current.
    I_fK = Kc/(Kc+Km_f)*(g_f_K*(V-E_K));
    // comment: The maximal sodium current.
    I_fNa = Kc/(Kc+Km_f)*(g_f_Na*(V-E_Na));
    // comment: The reversal potentials for the two ions.
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Kc/Ki);
  enddef;
  // The y gate is encapsulated within the hyperpolarising-activated current.

  // comment: The activation variable for the "funny" current - the y gate.
  def comp hyperpolarising_activated_current_y_gate as
    // This variable is defined here and used in other components.
    var y: dimensionless {pub: out, init: 0.2};
    // These variables are defined here and only used internally.
    var alpha_y: per_ms;
    var beta_y: per_ms;
    // These variables are imported from parent and sibling components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate for the y gate.
    alpha_y = 0.05e-3{per_ms}*exp(-0.067{per_mV}*(V+42.0{mV}));
    // comment: The closing rate for the y gate.
    beta_y = 1.0e-3{per_ms}*(V+42.0{mV})/(1.0{dimensionless}-exp(-0.2{per_mV}*(V+42.0{mV})));
    // comment: The Hodgkin-Huxley type kinetics for the y gate.
    ode(y, time) = alpha_y*(1.0{dimensionless}-y)-beta_y*y;
  enddef;
  // The time-dependent (delayed) potassium current is equivalent to the plateau
  // potassium current (1) in the MNT model.  It is controlled by a single gate,
  // x.

  // comment: The time-dependent potassium current, a current dependent on both potassium ion concentration and membrane potential.
  def comp time_dependent_potassium_current as
    // This variable is defined here and used in other components.
    var i_K: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    // <variable name="K" units="dimensionless" />
    var I_K: uA_per_mm2;
    var i_K_max: uA_per_mm2 {init: 0.2032};
    // These variables are imported from other components.
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Ki: mM {pub: in};
    var Kc: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    // This variable is imported from an encapsulated component.
    var x: dimensionless {priv: in};
    // comment: Calculation of the time-dependent potassium current.
    i_K = x*I_K;
    I_K = i_K_max*((Ki-Kc*exp(-(V*F/(R*T))))/140.0{mM});
  enddef;
  // The x gate encapsulated within the time-dependent potassium current.

  // comment: The voltage-dependent activation variable for the time-dependent potassium current, the x gate.
  def comp time_dependent_potassium_current_x_gate as
    // This variable is defined here and used in other components.
    var x: dimensionless {pub: out, init: 0.01};
    // These variables are defined here and only used internally.
    var alpha_x: per_ms;
    var beta_x: per_ms;
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    // comment: The opening rate of the x gate.
    alpha_x = 0.5e-3{per_ms}*(exp((V+50.0{mV})/12.1{mV})/(1.0{dimensionless}+exp((V+50.0{mV})/17.5{mV})));
    // comment: The closing rate of the x gate.
    beta_x = 1.3e-3{per_ms}*(exp(-((V+20.0{mV})/16.67{mV}))/(1.0{dimensionless}+exp(-((V+20.0{mV})/25.0{mV}))));
    // comment: The kinetics of the x gate.
    ode(x, time) = alpha_x*(1.0{dimensionless}-x)-beta_x*x;
  enddef;
  // The time-independent (background) potassium current (i_K1).

  // comment: The time-independent background potassium current.
  def comp time_independent_potassium_current as
    // This variable is defined here and used in other components.
    var i_K1: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_K1: mS_per_mm2 {init: 1.0385};
    var Km_K1: mM {init: 210.0};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_K: mV {pub: in};
    var Kc: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    // comment: Calculation of the time-independent postassium current.
    i_K1 = g_K1*(Kc/(Kc+Km_K1))*((V-E_K)/(1.0{dimensionless}+exp((V+10.0{mV}-E_K)*F*2.0{dimensionless}/(R*T))));
  enddef;
  // The transient outward current (i_to) replaces the i_qr chloride-based
  // current of the MNT model.  This current is a calcium-activated, outward
  // rectifier.  It has an inactivation gate, r.

  // comment: The transient outward current (i_to) replaces the i_qr chloride-based current of the MNT model. This current is a calcium-activated, outward rectifier. It has an inactivation gate, r.
  def comp transient_outward_current as
    // This variable is defined here and used in other components.
    var i_to: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var Km_to: mM {init: 10.0};
    var Km_Ca: mM {init: 0.5e-3};
    var g_to: mS_per_mm2 {init: 0.316e-3};
    // These variables are imported from other components.
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Kc: mM {pub: in};
    var Ki: mM {pub: in};
    var Cai: mM {pub: in};
    // this variable is imported from an encapsulated component.
    var r: dimensionless {priv: in};
    // comment: Calculation of the transient outward current.
    i_to = r*g_to*(0.2{mM}+Kc/(Km_to+Kc))*(Cai/(Km_Ca+Cai))*((V+10.0{mV})/(1.0{dimensionless}-exp(-0.2{per_mV}*(V+10.0{mV}))))*(Ki*exp(0.02{per_mV}*V)-Kc*exp(-0.02{per_mV}*V));
  enddef;
  // The inactivation process is described by the following r component.

  // comment: The activation variable for the transient outward current.
  def comp transient_outward_current_r_gate as
    // this variable is defined here and used in other components
    var r: dimensionless {pub: out, init: 1.0};
    // these variables are defined here and only used internally
    var alpha_r: per_ms;
    var beta_r: per_ms;
    // these variables are imported from parent and sibling components
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the r gate.
    alpha_r = 0.033e-3{per_ms}*exp(-V/17.0{mV});
    // comment: The closing rate of the r gate.
    beta_r = 33.0e-3{per_ms}/(1.0{dimensionless}+exp(-((V+10.0{mV})/8.0{mV})));
    // comment: The kinetics for the r gate.
    ode(r, time) = alpha_r*(1.0{dimensionless}-r)-beta_r*r;
  enddef;
  // The sodium background current is a simple, time-independent current which
  // is similar to the i_Na_b of the MNT model.  i_Ch_b is a background current
  // due to choline, or some other sodium substitute.

  // comment: A linear resting sodium flux.
  def comp sodium_background_current as
    // This variable is defined here and used in other components.
    var i_Na_b: uA_per_mm2 {pub: out};
    // This variable is defined here and only used internally.
    var g_Nab: mS_per_mm2 {init: 0.203e-3};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    // comment: Calculation of the background sodium current.
    i_Na_b = g_Nab*(V-E_Na);
  enddef;
  // The calcium background current is in the same form as the sodium background
  // current.

  // comment: A resting background leakage calcium flux.
  def comp calcium_background_current as
    // These variables are defined here and used in other components.
    var i_Ca_b: uA_per_mm2 {pub: out};
    var E_Ca: mV {pub: out};
    // This variable is defined here and only used internally.
    var g_Cab: mS_per_mm2 {init: 0.0226e-3};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    // comment: Calculation of the calcium leakage current.
    i_Ca_b = g_Cab*(V-E_Ca);
    // comment: The calcium reversal potential.
    E_Ca = R*T/(F*2.0{dimensionless})*ln(Cao/Cai);
  enddef;
  // The Na-K exchange pump couples the free energy released by the hydrolysis of
  // ATP to transfer sodium and potassium ions across the cell membrane against
  // their electrochemical gradients.  3 Na ions are pumped out for every 2 K
  // ions pumped into the cell.

  // comment: The Na-K exchange pump couples the free energy released by the hydrolysis of ATP to transfer sodium and potassium ions across the cell membrane against their electrochemical gradients. 3 Na ions are pumped out for every 2 K ions pumped into the cell.
  def comp sodium_potassium_pump as
    // This variable is defined here and used in other components.
    var i_NaK: uA_per_mm2 {pub: out};
    // This variable is defined here and only used internally.
    var I_NaK: uA_per_mm2 {init: 0.141};
    var K_mK: mM {init: 1.0};
    var K_mNa: mM {init: 40.0};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var Nai: mM {pub: in};
    var Kc: mM {pub: in};
    // comment: Calculation of the Na/K-pump current.
    i_NaK = I_NaK*(Kc/(K_mK+Kc))*(Nai/(K_mNa+Nai));
  enddef;
  // The equation for the Na-Ca exchange current assumes that i_NaCa depends
  // soley on the sodium and calcium ion electrochemical gradients and the
  // transmembrane potential.  The stoichiometry of the exchange is 3Na : 1Ca,
  // producing a net outward current.

  // comment: The DFN paper gives two alternative equations for the i_NaCa current. The simplest makes the current a sine function of the total energy gradient. The more realistic model uses an equation which is likely to reproduce better dependence of i_NaCa on intracellular calcium ions. We utilise the more complex version here.
  def comp Na_Ca_exchanger as
    // This variable is defined here and used in other components.
    var i_NaCa: uA_per_mm2 {pub: out};
    var n_NaCa: dimensionless {pub: out, init: 3.0};
    // These variables are defined here and only used internally.
    var k_NaCa: uA_per_mm2 {init: 0.0226e-3};
    // <variable name="E_NaCa" units="mV" />
    var d_NaCa: dimensionless {init: 0.001};
    var gamma: dimensionless {init: 0.5};
    // <variable name="n" units="dimensionless" />
    // These variables are imported in from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cao: mM {pub: in};
    var Cai: mM {pub: in};
    var E_Na: mV {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var E_Ca: mV {pub: in};
    // The current is given as:
    // comment: Calculation of the exchanger current.
    //
    //
    // <apply id="Na_Ca_exchanger_calculation1"><eq />
    //   <ci> i_NaCa </ci>
    //   <apply><times />
    //     <ci> K_NaCa </ci>
    //     <apply><sinh />
    //       <apply><divide />
    //         <apply><times />
    //           <apply><minus />
    //             <ci> V </ci>
    //             <ci> E_NaCa </ci>
    //           </apply>
    //           <ci> F </ci>
    //         </apply>
    //         <apply><times />
    //           <ci> R </ci>
    //           <ci> T </ci>
    //         </apply>
    //       </apply>
    //     </apply>
    //   </apply>
    // </apply>
    //
    // <apply id="E_NaCa_calculation"><eq />
    //   <ci> E_NaCa </ci>
    //   <apply><divide />
    //     <apply><minus />
    //       <apply><times />
    //         <ci> n_NaCa </ci>
    //         <ci> E_Na </ci>
    //       </apply>
    //       <apply><times />
    //         <cn cellml:units="dimensionless"> 2.0 </cn>
    //         <ci> E_Ca </ci>
    //       </apply>
    //     </apply>
    //     <apply><minus />
    //       <ci> n_NaCa </ci>
    //       <cn cellml:units="dimensionless"> 2.0 </cn>
    //     </apply>
    //   </apply>
    // </apply>
    i_NaCa = k_NaCa*((exp(gamma*(n_NaCa-2.0{dimensionless})*V*F/(R*T))*pow(Nai, n_NaCa)*Cao-exp(-1.0{dimensionless}*(1.0{dimensionless}-gamma)*(n_NaCa-2.0{dimensionless})*V*F/(R*T))*pow(Nao, n_NaCa)*Cai)/(1.0{dimensionless}+d_NaCa*(Cai*pow(Nao, n_NaCa)+Cao*pow(Nai, n_NaCa))));
  enddef;
  // The DFN model retains a two-variable mode; of the sodium kinetics, with new
  // equations for the gates m and h.  It is acknowledged however that the model
  // does not represent the slower components of Na inactivation and recovery.
  // It is also assumed that the sodium channel shows a 12% permeability to k
  // ions.

  // comment: The DFN model retains a two-variable model of the sodium kinetics, with new equations for the gates m and h. It is acknowledged however that the model does not represent the slower components of Na inactivation and recovery. It is also assumed that the sodium channel shows a 12% permeability to K ions.
  def comp fast_sodium_current as
    // This variable is defined here and used in other components.
    var i_Na: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_Na: mS_per_mm2 {init: 0.846};
    var E_mh: mV;
    // These variables are imported from other components.
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var Kc: mM {pub: in};
    var Ki: mM {pub: in};
    // These variables are imported from encapsulated components.
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    // comment: Calculation of the fast sodium current.
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*(V-E_mh);
    // comment: The reversal potential of the fast sodium channel, assuming a 12% permeability of potassium ions.
    E_mh = R*T/F*ln((Nao+0.12{dimensionless}*Kc)/(Nai+0.12{dimensionless}*Ki));
  enddef;
  // The "fast_sodium_current_m_gate" is the activation m gate encapsulated
  // inside the "fast sodium current" component.

  // comment: The voltage-dependent activation gate for the fast sodium channel - the m gate.
  def comp fast_sodium_current_m_gate as
    // This variable is defined here and used in other components.
    var m: dimensionless {pub: out, init: 0.01};
    // These variables are defined here and only used internally.
    var alpha_m: per_ms;
    var beta_m: per_ms;
    //
    // These variables are imported from the "environment" and the "membrane" via
    // the "fast_sodium_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the m gate.
    alpha_m = 200.0e-3{per_mV_ms}*(V+41.0{mV})/(1.0{dimensionless}-exp(-0.1{dimensionless}*(V+41.0{mV})));
    // comment: The closing rate of the m gate.
    beta_m = 8000.0e-3{per_ms}*exp(-0.056{dimensionless}*(V+66.0{mV}));
    // comment: The kinetics of the m gate.
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;
  // The "fast_sodium_current_h_gate" component is the inactivation h gate
  // encapsulated in the "fast sodium current" component.

  // comment: The voltage-dependent inactivation gate for the fast sodium current - the h gate.
  def comp fast_sodium_current_h_gate as
    // This variable is defined here and used in other components.
    var h: dimensionless {pub: out, init: 0.98};
    // These variables are defined here and only used internally.
    var alpha_h: per_ms;
    var beta_h: per_ms;
    //
    // These variables are imported from the "environment" and the "membrane" via
    // the "fast_sodium_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the h gate.
    alpha_h = 20.0e-3{per_ms}*exp(-0.125{dimensionless}*(V+75.0{mV}));
    // comment: The closing rate of the h gate.
    beta_h = 2000.0e-3{per_ms}/(1.0{dimensionless}+320.0{dimensionless}*exp(-0.1{dimensionless}*(V+75.0{mV})));
    // comment: The kinetics of the h gate.
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;
  // Like the MNT model, the kinetics of the secondary inward current are still
  // described in terms of two gate variables d and f, but the time constants for
  // activation and inactivation processes are much shorter.  The fast component,
  // i_si of this current has been divided into the individual ion movements of
  // Ca, K and Na.

  // comment: Like the MNT model, the kinetics of the secondary inward current are still described in terms of two gate variables d and f, but the time constants for activation and inactivation processes are much shorter. The fast component, i_si of this current has been divided into the individual ion movements of Ca, K and Na. This current would later be called the L-type calcium current.
  def comp secondary_inward_current as
    // These variables are defined here and used in other components.
    var i_si: uA_per_mm2 {pub: out};
    var i_siCa: uA_per_mm2 {pub: out};
    var i_siK: uA_per_mm2 {pub: out};
    var i_siNa: uA_per_mm2 {pub: out};
    // This variable is defined here and only used internally.
    var P_Ca: uA_per_mm2_per_mM {init: 16.93e-3};
    var P_CaK: dimensionless {init: 0.01};
    var P_CaNa: dimensionless {init: 0.01};
    // These variables are imported from other components.
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var Kc: mM {pub: in};
    var Ki: mM {pub: in};
    var Cao: mM {pub: in};
    var Cai: mM {pub: in, priv: out};
    // These variables are imported from encapsulated components.
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    // comment: The total i_si current is simply the sum of the component calcium, potassium, and sodium currents.
    i_si = i_siCa+i_siK+i_siNa;
    // comment: Calculation of the calcium component of the second inward current.
    i_siCa = d*f*f2*(4.0{dimensionless}*P_Ca*(V-50.0{mV})*(F/(R*T))/(1.0{dimensionless}-exp(-1.0{dimensionless}*(V-50.0{mV})*F*2.0{dimensionless}/(R*T))))*(Cai*exp(50.0{dimensionless}*F*2.0{dimensionless}/(R*T))-Cao*exp(-2.0{dimensionless}*(V-50.0{mV})*F/(R*T)));
    // comment: Calculation of the potassium component of the second inward current.
    i_siK = d*f*f2*(P_CaK*P_Ca*(V-50.0{mV})*(F/(R*T))/(1.0{dimensionless}-exp(-1.0{dimensionless}*(V-50.0{mV})*F/(R*T))))*(Ki*exp(50.0{dimensionless}*F/(R*T))-Kc*exp(-1.0{dimensionless}*(V-50.0{mV})*F/(R*T)));
    // comment: Calculation of the sodium component of the second inward current.
    i_siNa = d*f*f2*(P_CaNa*P_Ca*(V-50.0{mV})*(F/(R*T))/(1.0{dimensionless}-exp(-1.0{dimensionless}*(V-50.0{mV})*F/(R*T))))*(Nai*exp(50.0{dimensionless}*F/(R*T))-Nao*exp(-1.0{dimensionless}*(V-50.0{mV})*F/(R*T)));
  enddef;
  // The "secondary_inward_current_d_gate" component is the d gate encapsulated
  // in the "secondary inward current" component.

  // comment: The voltage-dependent activation gate for the second inward current - the d gate.
  def comp secondary_inward_current_d_gate as
    // This variable is defined here and used in other components.
    var d: dimensionless {pub: out, init: 0.005};
    // These variables are defined here and only used internally.
    var alpha_d: per_ms;
    var beta_d: per_ms;
    //
    // These variables are imported from the "environment" and the "membrane" via
    // the "secondary_inward_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the d gate.
    alpha_d = 30.0e-3{per_mV_ms}*((V+19.0{mV})/(1.0{dimensionless}-exp(-1.0{dimensionless}*(V+19.0{mV})/4.0{mV})));
    // comment: The closing rate of the d gate.
    beta_d = 12.0e-3{per_mV_ms}*((V+19.0{mV})/(exp((V+19.0{mV})/10.0{mV})-1.0{dimensionless}));
    // comment: The kinetics of the d gate.
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;
  // The "secondary_inward_current_f_gate" component is the f gate encapsulated
  // in the "secondary inward current" component.

  // comment: The voltage-dependent inactivation gate for the second inward current - the f gate.
  def comp secondary_inward_current_f_gate as
    // This variable is defined here and used in other components.
    var f: dimensionless {pub: out, init: 1.0};
    // These variables are defined here and only used internally.
    var alpha_f: per_ms;
    var beta_f: per_ms;
    // These variables are imported from parent and sibling components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    // comment: The opening rate of the f gate.
    alpha_f = 6.25e-3{per_mV_ms}*((V+34.0{mV})/(exp((V+34.0{mV})/4.0{mV})-1.0{dimensionless}));
    // comment: The closing rate of the f gate.
    beta_f = 50.0e-3{per_ms}/(1.0{dimensionless}+exp(-1.0{dimensionless}*(V+34.0{mV})/4.0{mV}));
    // comment: The kinetics of the f gate.
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
  enddef;
  // The DFN model also includes a description of Ca-dependent inactivation.
  // When calcium ions bind to a regulatory site on the channel protein, they
  // induce a conformational change such that the channel no longer conducts,
  // and the secondary current slows or ceases.

  // comment: The DFN model also includes a description of Ca-dependent inactivation. When calcium ions bind to a regulatory site on the channel protein, they induce a conformational change such that the channel no longer conducts, and the secondary current slows or ceases.
  def comp secondary_inward_current_f2_gate as
    // This variable is defined here and used in other components.
    var f2: dimensionless {pub: out, init: 1.0};
    // These variables are defined here and only used internally.
    var alpha_f2: per_ms {init: 5.0e-3};
    var beta_f2: per_ms;
    var K_mf2: mM {init: 1.0e-3};
    // These variables are imported from parent and sibling components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    // comment: The kinetics of the f2 gate.
    ode(f2, time) = alpha_f2*(1.0{dimensionless}-f2)-beta_f2*f2;
    beta_f2 = Cai*alpha_f2/K_mf2;
  enddef;
  // Additionally, the DFN model attempted to quantify the changes in several ion
  // concentrations, as well as the [Ca]i of earlier models.

  // comment: A representation of extracellular sodium ion concentration, held constant in this model.
  def comp extracellular_sodium_concentration as
    // This variable is defined here and used in other components
    var Nao: mM {pub: out, init: 140.0};
  enddef;

  // comment: This component contains the description of intracellular sodium concentration change.
  def comp intracellular_sodium_concentration as
    // This variable is defined here and used in other components
    var Nai: mM {pub: out, init: 8.0};
    // These variables are imported from other components.
    var V_i: dimensionless {pub: in};
    var Am: per_mm {pub: in};
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_siNa: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_fNa: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var n_NaCa: dimensionless {pub: in};
    // comment: The rate of change of intracellular sodium concentration is the sum of the ions entering the intracellular volume via the sodium transmembrane currents.
    ode(Nai, time) = -(Am*(i_Na+i_Na_b+i_fNa+i_siNa+i_NaK*3.0{dimensionless}+i_NaCa*(n_NaCa/(n_NaCa-2.0{dimensionless}))))/(V_i*F);
  enddef;

  // comment: A representation of extracellular calcium ion concentration, held constant in this model.
  def comp extracellular_calcium_concentration as
    // This variable is defined here and used in other components
    var Cao: mM {pub: out, init: 2.0};
  enddef;
  // Changes in [Ca]i were first modelled in the BR model and has only been
  // slightly developed in the DFN model.  Calcium is sequestered in the
  // sarcoplasmic reticulum ([Ca]up).  A fraction is transferred to a release
  // store in the junctional SR ([Ca]rel) before being released into the
  // intracellular space.  The Ca concentrations in each of these various
  // stores is modelled together with the transfer between the calcium sites
  // and the ca transfer across the cell membrane via the other ionic
  // currents.

  // comment: Changes in [Ca]i were first modelled in the BR model and has only been slightly developed in the DFN model. Calcium is sequestered in the sarcoplasmic reticulum ([Ca]up). A fraction is transferred to a release store in the junctional SR ([Ca]rel) before being released into the intracellular space. The Ca concentrations in each of these various stores is modelled together with the transfer between the calcium sites and the Ca transfer across the cell membrane via the other ionic currents.
  def comp intracellular_calcium_concentration as
    // This variable is defined here and used in other components
    var Cai: mM {pub: out, init: 0.00005};
    // These variables are defined here and only used internally.
    var Am: per_mm {pub: in};
    var V_up: dimensionless {pub: in};
    var V_rel: dimensionless {pub: in};
    var V_i: dimensionless {pub: in};
    var i_up: mM_per_ms;
    var i_tr: mM_per_ms;
    var i_rel: mM_per_ms;
    var alpha_up: per_ms_per_mM;
    var alpha_tr: per_ms;
    var alpha_rel: per_ms;
    var Ca_up: mM {init: 2.0};
    var Ca_rel: mM {init: 1.0};
    var Ca_up_max: mM {init: 5.0};
    var K_mCa: mM2 {init: 1.0e-6};
    var p: dimensionless {init: 1.0};
    var alpha_p: per_ms;
    var beta_p: per_ms;
    var tau_up: ms {init: 25.0};
    var tau_rep: ms {init: 2.0e+3};
    var tau_rel: ms {init: 50.0};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_siCa: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var n_NaCa: dimensionless {pub: in};
    // comment: The calcium current into the uptake store.
    i_up = alpha_up*Cai*(Ca_up_max-Ca_up);
    alpha_up = 1.0{dimensionless}/(tau_up*Ca_up_max);
    // comment: The calcium current between the uptake and release stores, which uses a voltage-dependent activation variable - the p gate.
    i_tr = alpha_tr*p*(Ca_up-Ca_rel);
    alpha_tr = 1.0{dimensionless}/tau_rep;
    // comment: The opening rate of the p gate.
    alpha_p = 0.625e-3{per_mV_ms}*((V+34.0{mV})/(exp((V+34.0{mV})/4.0{mV})-1.0{dimensionless}));
    // comment: The closing rate of the p gate.
    beta_p = 5.0e-3{per_ms}/(1.0{dimensionless}+exp(-1.0{dimensionless}*(V+34.0{mV})/4.0{mV}));
    // comment: The kinetics of the p gate.
    ode(p, time) = alpha_p*(1.0{dimensionless}-p)-beta_p*p;
    // comment: The calcium release current from the SR into the cytosol.
    i_rel = alpha_rel*Ca_rel*(sqr(Cai)/(sqr(Cai)+K_mCa));
    alpha_rel = 1.0{dimensionless}/tau_rel;
    // comment: The rate of change of calcium concentration in the uptake store.
    ode(Ca_up, time) = i_up*(V_i/V_up)-i_tr*(V_rel/V_up);
    // comment: The rate of change of calcium concentration in the release store.
    ode(Ca_rel, time) = i_tr-i_rel;
    // comment: The rate of change of intracellular calcium concentration.
    ode(Cai, time) = i_rel*(V_rel/V_i)-(i_up+Am*(i_siCa+i_Ca_b-2.0{dimensionless}*i_NaCa/(n_NaCa-2.0{dimensionless}))/(2.0{dimensionless}*V_i*F));
  enddef;
  // The DFN model assumes that the potassium ion concentration is homogeneous
  // throughout the three-compartment model.

  // comment: A representation of extracellular potassium ion concentration based on a homogeneous three-compartment model.
  def comp extracellular_potassium_concentration as
    // This variable is defined here and used in other components
    var Kc: mM {pub: out, init: 4.0};
    // These variables are defined here and only used internally.
    var Am: per_mm {pub: in};
    var V_i: dimensionless {pub: in};
    var Kb: mM {init: 4.0};
    var i_mK: uA_per_mm2 {pub: out};
    var P: dimensionless {init: 0.7};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_fK: uA_per_mm2 {pub: in};
    var i_siK: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_to: uA_per_mm2 {pub: in};
    // comment: The rate of change in the cleft potassium concentration is the combination of potassium ions crossing the cellular membrane and ions diffusing into the volume from the bulk extracellular stores.
    ode(Kc, time) = -(P*(Kc-Kb))+Am*i_mK/(V_i*F);
    // comment: The total transmembrane potassium current.
    i_mK = i_K1+i_K+i_fK+i_siK+i_to-2.0{dimensionless}*i_NaK;
  enddef;
  // The intracellular potassium concentration is related to the total potassium
  // ion membrane flux.

  // comment: The change in intracellular potassium ion concentration.
  def comp intracellular_potassium_concentration as
    // This variable is defined here and used in other components
    var Ki: mM {pub: out, init: 140.0};
    // These variables are defined here and only used internally.
    var Am: per_mm {pub: in};
    var V_i: dimensionless {pub: in};
    var i_mK: uA_per_mm2 {pub: in};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    // comment: The rate of change of intracellular potassium concentration is the sum of the ions crossing the membrane.
    ode(Ki, time) = -(Am*i_mK)/(V_i*F);
  enddef;

  // comment: A component used to group the geometry parameters and calculations.
  def comp volumes as
    var radius: mm {init: 50e-3};
    var length: mm {init: 2};
    var V_ecs: dimensionless {init: 0.1};
    var Am: per_mm {init: 40.0, pub: out};
    var V_i: dimensionless {pub: out};
    var V_e: dimensionless {pub: out};
    var V_up: dimensionless {pub: out};
    var V_rel: dimensionless {pub: out};
    // comment: The intracellular volume fraction.
    V_i = 1.0{dimensionless}-V_ecs;
    // comment: The extracellular volume fraction.
    V_e = V_ecs;
    // comment: The calcium uptake store volume fraction.
    V_up = 0.05{dimensionless}*V_i;
    // comment: The calcium release store volume fraction.
    V_rel = 0.02{dimensionless}*V_i;
  enddef;
  // The following <group> element specifies a single containment hierarchy
  // that encompasses all of the components in the model, with the exception of
  // the "environment" component.

  def group as containment for
    comp membrane incl
      comp hyperpolarising_activated_current incl
        comp hyperpolarising_activated_current_y_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_x_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp transient_outward_current incl
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp Na_Ca_exchanger;
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp secondary_inward_current incl
        comp secondary_inward_current_d_gate;
        comp secondary_inward_current_f_gate;
        comp secondary_inward_current_f2_gate;
      endcomp;
      comp intracellular_sodium_concentration;
      comp extracellular_sodium_concentration;
      comp intracellular_calcium_concentration;
      comp extracellular_calcium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
    endcomp;
  enddef;
  // The following <group> element specifies how the components representing
  // activation and inactivation gates are encapsulated inside their parent
  // currents.

  def group as encapsulation for
    comp hyperpolarising_activated_current incl
      comp hyperpolarising_activated_current_y_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_x_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_r_gate;
    endcomp;
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp secondary_inward_current incl
      comp secondary_inward_current_d_gate;
      comp secondary_inward_current_f_gate;
      comp secondary_inward_current_f2_gate;
    endcomp;
  enddef;
  // "time" is passed from the "environment" component into the
  // "membrane" and current components.
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between secondary_inward_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between extracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and extracellular_potassium_concentration for
    vars i_to and i_to;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  // Several variables are passed between the "membrane" and its sub-components.
  def map between hyperpolarising_activated_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_f and i_f;
  enddef;
  def map between time_dependent_potassium_current and membrane for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between time_independent_potassium_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_K1 and i_K1;
  enddef;
  def map between transient_outward_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_to and i_to;
  enddef;
  def map between sodium_background_current and membrane for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between Na_Ca_exchanger and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between fast_sodium_current and membrane for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between secondary_inward_current and membrane for
    vars V and V;
    vars i_si and i_si;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between intracellular_sodium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_calcium_concentration and membrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between extracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  // A few variables are passed between the other components.
  def map between hyperpolarising_activated_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_fK and i_fK;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between hyperpolarising_activated_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between hyperpolarising_activated_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and Na_Ca_exchanger for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_sodium_concentration for
    vars i_fNa and i_fNa;
    vars Nai and Nai;
  enddef;
  def map between hyperpolarising_activated_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between calcium_background_current and Na_Ca_exchanger for
    vars E_Ca and E_Ca;
  enddef;
  def map between calcium_background_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between time_dependent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K and i_K;
  enddef;
  def map between time_dependent_potassium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K1 and i_K1;
  enddef;
  def map between transient_outward_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between transient_outward_current and intracellular_calcium_concentration for
    vars Cai and Cai;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_Ca_b and i_Ca_b;
    vars Cai and Cai;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars i_NaK and i_NaK;
    vars Kc and Kc;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_NaK and i_NaK;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between Na_Ca_exchanger and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between Na_Ca_exchanger and intracellular_sodium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and intracellular_calcium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between fast_sodium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between secondary_inward_current and intracellular_calcium_concentration for
    vars i_siCa and i_siCa;
    vars Cai and Cai;
  enddef;
  def map between secondary_inward_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between secondary_inward_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between secondary_inward_current and extracellular_potassium_concentration for
    vars i_siK and i_siK;
    vars Kc and Kc;
  enddef;
  def map between secondary_inward_current and intracellular_sodium_concentration for
    vars i_siNa and i_siNa;
    vars Nai and Nai;
  enddef;
  def map between secondary_inward_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  // Several variables are passed between parent components and their
  // encapsulated gates.
  def map between hyperpolarising_activated_current and hyperpolarising_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between secondary_inward_current and secondary_inward_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between secondary_inward_current and secondary_inward_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
  enddef;
  def map between secondary_inward_current and secondary_inward_current_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between volumes and intracellular_sodium_concentration for
    vars V_i and V_i;
    vars Am and Am;
  enddef;
  def map between volumes and intracellular_calcium_concentration for
    vars V_i and V_i;
    vars V_up and V_up;
    vars V_rel and V_rel;
    vars Am and Am;
  enddef;
  def map between volumes and extracellular_potassium_concentration for
    vars V_i and V_i;
    vars Am and Am;
  enddef;
  def map between volumes and intracellular_potassium_concentration for
    vars V_i and V_i;
    vars Am and Am;
  enddef;
  def map between extracellular_potassium_concentration and intracellular_potassium_concentration for
    vars i_mK and i_mK;
  enddef;
enddef;
