//   FILE :  LR_II_model_1994.xml
//
// CREATED :  28th March 2002
//
// LAST MODIFIED : 30th July 2003
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of the mammalian
// ventricular action potential based on the Luo-Rudy II model, 1994.  This model
// is a development of the LR-I model.  In particular, the LR-II model describes
// the processes which regulate [Ca]i (intracellular Calcium concentration), and
// the movement of calcium ions through the cell and to and from the sarcoplasmic
// reticulum.
//
// CHANGES:
//   18/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   05/06/2003 - CML - Fixed MathML in a few components.
//   30/07/2003 - CML - Fixed MathML in a few components.
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit The Bioengineering Institute
// created: W3CDTF 2002-03-28
// modification: Fixed maths.; Family Lloyd; Given Catherine; Other May; W3CDTF 2003-07-30
// modification: Fixed maths: alpha_J_calculation in fast_sodium_current_j_gate, beta_K1_calculation in time_independent_potassium_current_K1_gate, and i_NaK_calculation in sodium_potassium_pump.; Family Lloyd; Given Catherine; Other May; W3CDTF 2003-06-05
// publisher: The University of Auckland, The Bioengineering Institute
// title: The Luo-Rudy II Model of Mammalian Ventricular Cardiac Action Potentials, 1994
// comment: This is the CellML description of Luo and Rudy's mathematical model of the mammalian cardiac ventricular action potential. It is a significant development on their original 1991 model. While this version of the model qualitatively compares well to the LR II paper for the action potential, the intracellular calcium dynamics have not been included correctly - namely there is no calcium-induced calcium-release (CICR) process in this version of the model. The original version of the model simulates CICR via a mechanism whereby CICR is induced if and only if the calcium accumulated in the cell in the 2 ms following (dV/dt)max exceeds a given threshold. This sort of process is a bit tricky to include in the CellML (or at least in a way that will work with the CellML abilitites of CMISS) so has been left out for now.; FN Catherine Lloyd
// species: Mammalia
// bio_entity: Ventricular Myocyte
// reference: Pubmed_id 7514509
// simulation: #simulation; multistepMethod bdf; iterationMethod newton; linearSolver dense; #time; maximumStepSize 0.01; tabulationStepSize 1.0; startingValue 0; endingValue 700
def model LR_II_model_1994 as
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The Publisher metadata.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "LR_II_model_1994", which is declared on the
  // <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  // The model is relevant to all mammals.
  //
  // The CellML Metadata Specification recommends that bibliographic metadata
  // is used to provide information about the original model reference.  The
  // "identifier" attribute on the "BibliographicReference" class provides an
  // elegant way to identify a cited reference using a database identifier            such as Pubmed.  All associated data such as author, journal title,
  // date, etc can be looked up on the database.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit per_mm as
    unit metre {pref: milli, expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mV_per_ms as
    unit mV;
    unit ms {expo: -1};
  enddef;
  def unit per_mV as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mS_per_mm2 as
    unit siemens {pref: milli};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit uA_per_mm2 as
    unit ampere {pref: micro};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: nano};
    unit metre {pref: milli, expo: -3};
  enddef;
  def unit gas_constant_units as
    unit joule {pref: pico};
    unit mole {pref: nano, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit faradays_constant_units as
    unit coulomb {pref: nano};
    unit mole {pref: nano, expo: -1};
  enddef;
  def unit mm_per_ms as
    unit metre {pref: milli};
    unit ms {expo: -1};
  enddef;
  def unit mm2 as
    unit metre {pref: milli, expo: 2};
  enddef;
  def unit uA_per_mmcu as
    unit ampere {pref: micro};
    unit metre {pref: milli, expo: -3};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: ms {pub: out};
  enddef;

  // comment: The main component for the model, contains all ionic currents and defines the transmembrane potential.
  def comp membrane as
    var V: mV {pub: out, init: -84.624};
    var R: gas_constant_units {pub: out, init: 8.3145e3};
    var T: kelvin {pub: out, init: 310.0};
    var F: faradays_constant_units {pub: out, init: 96845.0};
    var dV_dt: mV_per_ms {pub: out};
    var Am: per_mm {pub: out, priv: out, init: 200};
    // These variables are defined here and only used internally.
    var Cm: uF_per_mm2 {init: 0.01};
    var I_st: uA_per_mm2;
    var stimTime: ms {init: 100.0};
    var stimDuration: ms {init: 1.0};
    var stimCurrent: uA_per_mmcu {init: 100};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Ca_L: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_ns_Ca: uA_per_mm2 {pub: in};
    // The membrane voltage (V) is calculated as an ordinary
    // differential equation in terms of the currents.
    // comment: We need to use dV/dt in the calulation of calcium-induced calcium-release, so we make it accessible here.
    dV_dt = (I_st-(i_Na+i_Ca_L+i_K+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca))/Cm;
    // comment: Assign the rate of change of potential for the differential equation.
    ode(V, time) = dV_dt;
    I_st = sel
      case (time >= stimTime) and (time <= stimTime+stimDuration):
        stimCurrent/Am;
      otherwise:
        0.0{uA_per_mmsq};
    endsel;
  enddef;

  // comment: The fast sodium current is primarily responsible for the upstroke of the action potential.
  def comp fast_sodium_current as
    var i_Na: uA_per_mm2 {pub: out};
    var E_Na: mV {pub: out};
    var g_Na: mS_per_mm2 {init: 0.16};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var F: faradays_constant_units {pub: in};
    var T: kelvin {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    // comment: Calculation of the fast sodium current.
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
    // comment: Calculation of reversal potential for the fast sodium channel.
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  // comment: The voltage-dependent activation gate for the fast sodium channel - the m gate.
  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0, pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate for the m gate.
    alpha_m = 0.32{per_mV_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    // comment: The closing rate for the m gate.
    beta_m = 0.08{per_ms}*exp(-V/11.0{mV});
    // comment: The kinetics of the m gate.
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  // comment: The voltage-dependent inactivation gate for the fast sodium channel - the h gate.
  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 1.0, pub: out};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate for the h gate.
    alpha_h = sel
      case V < -40.0{mV}:
        0.135{per_ms}*exp((80.0{mV}+V)/(-6.8{mV}));
      otherwise:
        0.0{per_ms};
    endsel;
    // comment: The closing rate for the h gate.
    beta_h = sel
      case V < -40.0{mV}:
        3.56{per_ms}*exp(0.079{mV}*V)+310000.0{per_ms}*exp(0.35{per_mV}*V);
      otherwise:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
    endsel;
    // comment: The kinetics of the h gate.
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  // comment: The voltage-dependent slow inactivation gate for the fast sodium channel - the j gate.
  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 1.0, pub: out};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate for the j gate.
    alpha_j = sel
      case V < -40.0{mV}:
        (-127140.0{per_mV_ms}*exp(0.2444{per_mV}*V)-0.00003474{per_mV_ms}*exp(-0.04391{per_mV}*V))*((V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}))));
      otherwise:
        0.0{per_ms};
    endsel;
    // comment: The closing rate for the j gate.
    beta_j = sel
      case V < -40.0{mV}:
        0.1212{per_ms}*exp(-0.01052{per_mV}*V)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.3{per_ms}*exp(-0.0000002535{per_mV}*V)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV})));
    endsel;
    // comment: The kinetics of for the j gate.
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  // comment: The L-type calcium channel. Primarily a calcium specific channel, but with small potassium and sodium components, activated at plateau potentials.
  def comp L_type_Ca_channel as
    var i_Ca_L: uA_per_mm2 {pub: out};
    var i_CaCa: uA_per_mm2 {pub: out};
    var i_CaK: uA_per_mm2 {pub: out};
    var i_CaNa: uA_per_mm2 {pub: out};
    var gamma_Nai: dimensionless {pub: out, init: 0.75};
    var gamma_Nao: dimensionless {pub: out, init: 0.75};
    var gamma_Ki: dimensionless {pub: out, init: 0.75};
    var gamma_Ko: dimensionless {pub: out, init: 0.75};
    var I_CaCa: uA_per_mm2;
    var I_CaK: uA_per_mm2;
    var I_CaNa: uA_per_mm2;
    var P_Ca: mm_per_ms {init: 5.4e-6};
    var P_Na: mm_per_ms {init: 6.75e-9};
    var P_K: mm_per_ms {init: 1.93e-9};
    var gamma_Cai: dimensionless {init: 1.0};
    var gamma_Cao: dimensionless {init: 0.34};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Cai: mM {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    // comment: The calcium component of the total L-type channel current.
    i_CaCa = d*f*f_Ca*I_CaCa;
    // comment: The sodium component of the total L-type channel current.
    i_CaNa = d*f*f_Ca*I_CaNa;
    // comment: The potassium component of the total L-type channel current.
    i_CaK = d*f*f_Ca*I_CaK;
    // comment: The maximum calcium component of the total L-type channel current.
    I_CaCa = P_Ca*sqr(2.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Cai*Cai*exp(2.0{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    // comment: The maximum sodium component of the total L-type channel current.
    I_CaNa = P_Na*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Nai*Nai*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    // comment: The maximum potassium component of the total L-type channel current.
    I_CaK = P_K*sqr(1.0{dimensionless})*(V*sqr(F)/(R*T))*((gamma_Ki*Ki*exp(1.0{dimensionless}*V*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*V*F/(R*T))-1.0{dimensionless}));
    // comment: The total current of the L-type channel current.
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  // comment: The voltage-dependent activation gate for the L-type calcium channel - the d gate.
  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 0.0, pub: out};
    var alpha_d: per_ms;
    var beta_d: per_ms;
    var d_infinity: dimensionless;
    var tau_d: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the d gate.
    alpha_d = d_infinity/tau_d;
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-((V+10.0{mV})/6.24{mV})));
    tau_d = d_infinity*((1.0{dimensionless}-exp(-((V+10.0{mV})/6.24{mV})))/(0.035{per_mV_ms}*(V+10.0{mV})));
    // comment: The closing rate of the d gate.
    beta_d = (1.0{dimensionless}-d_infinity)/tau_d;
    // comment: The kinetics of the d gate.
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;

  // comment: The voltage-dependent inactivation gate for the L-type calcium channel - the f gate.
  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 1.0, pub: out};
    var alpha_f: per_ms;
    var beta_f: per_ms;
    var f_infinity: dimensionless;
    var tau_f: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the f gate.
    alpha_f = f_infinity/tau_f;
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+35.06{mV})/8.6{mV}))+0.6{dimensionless}/(1.0{dimensionless}+exp((50.0{mV}-V)/20.0{mV}));
    tau_f = 1.0{ms}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_mV}*(V+10.0{mV})))+0.02{dimensionless});
    // comment: The closing rate of the f gate.
    beta_f = (1.0{dimensionless}-f_infinity)/tau_f;
    // comment: The kinetics of the f gate.
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
  enddef;

  // comment: The calcium-dependent inactivation gate for the L-type calcium channel - the fCa gate.
  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: mM {init: 0.6e-3};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    // comment: The kinetics of the fCa gate.
    f_Ca = 1.0{dimensionless}/(1.0{dimensionless}+sqr(Cai/Km_Ca));
  enddef;

  // comment: The time-dependent potassium reploarisation current.
  def comp time_dependent_potassium_current as
    var i_K: uA_per_mm2 {pub: out};
    var g_K_max: mS_per_mm2 {init: 2.82e-3};
    var g_K: mS_per_mm2;
    var E_K: mV;
    var PR_NaK: dimensionless {init: 0.01833};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var X: dimensionless {priv: in};
    var Xi: dimensionless {priv: in};
    // comment: The conductance for the channel.
    g_K = g_K_max*sqrt(Ko/5.4{mM});
    // comment: The reversal potential of the channel.
    E_K = R*T/F*ln((Ko+PR_NaK*Nao)/(Ki+PR_NaK*Nai));
    // comment: Calculation of the current.
    i_K = g_K*sqr(X)*Xi*(V-E_K);
  enddef;

  // comment: The time-dependent activation gate for the time-dependent potassium current - the X gate.
  def comp time_dependent_potassium_current_X_gate as
    var X: dimensionless {init: 0.0, pub: out};
    var alpha_X: per_ms;
    var beta_X: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate for the X gate.
    alpha_X = 0.0000719{per_mV_ms}*(V+30.0{mV})/(1.0{dimensionless}-exp(-0.148{dimensionless}*(V+30.0{mV})));
    // comment: The closing rate for the X gate.
    beta_X = 0.000131{per_mV_ms}*(V+30.0{mV})/(-1.0{dimensionless}+exp(0.0687{dimensionless}*(V+30.0{mV})));
    // comment: The kinetics of the X gate.
    ode(X, time) = alpha_X*(1.0{dimensionless}-X)-beta_X*X;
  enddef;

  // comment: The time-independent inactivation gate for the time-dependent potassium current - the Xi gate.
  def comp time_dependent_potassium_current_Xi_gate as
    var Xi: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The kinetics of the Xi gate.
    Xi = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-56.26{mV})/32.1{mV}));
  enddef;

  // comment: The time-independent potassium repolarisation current.
  def comp time_independent_potassium_current as
    var i_K1: uA_per_mm2 {pub: out};
    var E_K1: mV {pub: out, priv: out};
    var g_K1_max: mS_per_mm2 {init: 7.5e-3};
    var g_K1: mS_per_mm2;
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var K1_infinity: dimensionless {priv: in};
    // comment: Calculation of the channel conductance.
    g_K1 = g_K1_max*sqrt(Ko/5.4{mM});
    // comment: Calculation of the channel reversal potential.
    E_K1 = R*T/F*ln(Ko/Ki);
    // comment: Calculation of the channel current.
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;

  // comment: The gating variable for the time-independent potassium current - the K1 gate.
  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var E_K1: mV {pub: in};
    // comment: The opening rate for the K1 gate.
    alpha_K1 = 1.02{per_ms}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V-E_K1-59.215{mV})));
    // comment: The closing rate for the K1 gate.
    beta_K1 = (0.49124{per_ms}*exp(0.08032{dimensionless}*(V+5.476{mV}-E_K1))+exp(0.06175{dimensionless}*(V-(E_K1+594.31{mV}))))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V-E_K1+4.753{mV})));
    // comment: The steady-state kinetics of the K1 gate.
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  // comment: The potassium current active at plateau potentials.
  def comp plateau_potassium_current as
    var i_Kp: uA_per_mm2 {pub: out};
    var E_Kp: mV;
    var g_Kp: mS_per_mm2 {init: 1.83e-4};
    var Kp: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_K1: mV {pub: in};
    // comment: The reversal potential for the channel.
    E_Kp = E_K1;
    // comment: The gating kinetics for the channel.
    Kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
    // comment: Calculation of the current.
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;

  // comment: A calcium pump for removal of calcium from the cytosol to the extracellular space.
  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: uA_per_mm2 {pub: out};
    var K_mpCa: mM {init: 0.5e-3};
    var I_pCa: uA_per_mm2 {init: 1.15e-2};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    // comment: The calcium pump current.
    i_p_Ca = I_pCa*(Cai/(K_mpCa+Cai));
  enddef;

  // comment: The background sodium current.
  def comp sodium_background_current as
    var i_Na_b: uA_per_mm2 {pub: out};
    var g_Nab: mS_per_mm2 {init: 1.41e-5};
    var E_NaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    // comment: The reversal potential for the channel.
    E_NaN = E_Na;
    // comment: Calculation of the current.
    i_Na_b = g_Nab*(V-E_NaN);
  enddef;

  // comment: The background calcium current.
  def comp calcium_background_current as
    var i_Ca_b: uA_per_mm2 {pub: out};
    var g_Cab: mS_per_mm2 {init: 3.016e-5};
    var E_CaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    // comment: The reversal potential for the channel.
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    // comment: Calculation of the current.
    i_Ca_b = g_Cab*(V-E_CaN);
  enddef;

  // comment: The sodium/potassium exchanger current which extrudes three sodium ions from the cell in exchange for two potassium ions entering the cell.
  def comp sodium_potassium_pump as
    var i_NaK: uA_per_mm2 {pub: out};
    var I_NaK: uA_per_mm2 {init: 1.5e-2};
    var f_NaK: dimensionless;
    var K_mNai: mM {init: 10.0};
    var K_mKo: mM {init: 1.5};
    var sigma: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*(V*F/(R*T)))+0.0365{dimensionless}*sigma*exp(-(V*F/(R*T))));
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{dimensionless})-1.0{dimensionless});
    // comment: Calculation of the exchanger current.
    i_NaK = I_NaK*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless})))*(Ko/(Ko+K_mKo));
  enddef;

  // comment: A non-specific calcium activated channel - assumed impermeable to calcium ions but permeable to sodium and potassium ions.
  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: uA_per_mm2 {pub: out};
    var i_ns_Na: uA_per_mm2 {pub: out};
    var i_ns_K: uA_per_mm2 {pub: out};
    var P_ns_Ca: mm_per_ms {init: 1.75e-9};
    var gamma_Nai: dimensionless {pub: in};
    var gamma_Nao: dimensionless {pub: in};
    var gamma_Ki: dimensionless {pub: in};
    var gamma_Ko: dimensionless {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    var I_ns_Na: uA_per_mm2;
    var I_ns_K: uA_per_mm2;
    var K_m_ns_Ca: mM {init: 1.2e-3};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var V: mV {pub: in};
    var Vns: mV;
    var EnsCa: mV;
    // comment: The channel reversal potential.
    EnsCa = R*T/F*ln((Ko+Nao)/(Ki+Nai));
    Vns = V-EnsCa;
    // comment: The sodium component of the channel's current.
    i_ns_Na = I_ns_Na*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    // comment: The potassium component of the channel's current.
    i_ns_K = I_ns_K*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    // comment: The total current through the channel.
    i_ns_Ca = i_ns_Na+i_ns_K;
    // comment: The maximum sodium component of the channel's current.
    I_ns_Na = P_ns_Ca*sqr(1.0{dimensionless})*(Vns*sqr(F)/(R*T))*((gamma_Nai*Nai*exp(1.0{dimensionless}*Vns*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*Vns*F/(R*T))-1.0{dimensionless}));
    // comment: The maximum potassium component of the channel's current.
    I_ns_K = P_ns_Ca*sqr(1.0{dimensionless})*(Vns*sqr(F)/(R*T))*((gamma_Ki*Ki*exp(1.0{dimensionless}*Vns*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*Vns*F/(R*T))-1.0{dimensionless}));
  enddef;

  // comment: The sodium-calcium exchanger current, exchanges three sodium ions for one calcium ion.
  def comp Na_Ca_exchanger as
    var i_NaCa: uA_per_mm2 {pub: out};
    var K_NaCa: uA_per_mm2 {init: 20.0};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    // comment: Calculation of the exchanger current.
    i_NaCa = K_NaCa*(1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless})))*(1.0{dimensionless}/(K_mCa+Cao))*(1.0{dimensionless}/(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V*(F/(R*T)))))*(exp(eta*V*(F/(R*T)))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V*(F/(R*T)))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  // comment: The various calcium fluxes into and from the sarcoplasmic reticulum.
  def comp calcium_fluxes_in_the_SR as
    var i_rel: mM_per_ms {pub: out};
    var i_up: mM_per_ms {pub: out};
    var i_leak: mM_per_ms {pub: out};
    var i_tr: mM_per_ms {pub: out};
    var G_rel: per_ms;
    var G_rel_peak: per_ms;
    var G_rel_max: per_ms {init: 60.0};
    var tau_on: ms {init: 2.0};
    var tau_off: ms {init: 2.0};
    var t_CICR: ms {init: 0.0};
    var tau_tr: ms {init: 180.0};
    var K_mrel: mM {init: 0.8e-3};
    var K_mup: mM {init: 0.92e-3};
    var K_leak: per_ms;
    var I_up: mM_per_ms {init: 0.005};
    var Ca_NSR_max: mM {init: 15.0};
    var delta_Ca_i2: mM {init: 0.0};
    var delta_Ca_ith: mM {init: 0.18e-3};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var Ca_JSR: mM {pub: in};
    var Ca_NSR: mM {pub: in};
    // comment: The release flux from the junctional sarcoplasmic reticulum into the cytosol.
    i_rel = G_rel*(Ca_JSR-Cai);
    // comment: Calculation of the release channel conductance. This is incorrect as there is no CICR induced via the accumulation of calcium in the cytosol in the period following max(dV/dt)
    G_rel = G_rel_peak*((delta_Ca_i2-delta_Ca_ith)/(K_mrel+delta_Ca_i2-delta_Ca_ith))*(1.0{dimensionless}-exp(-(t_CICR/tau_on)))*exp(-(t_CICR/tau_off));
    G_rel_peak = sel
      case delta_Ca_i2 < delta_Ca_ith:
        0.0{per_ms};
      otherwise:
        G_rel_max;
    endsel;
    // comment: The uptake flux into the sarcoplasmic reticulum from the cytosol.
    i_up = I_up*(Cai/(Cai+K_mup));
    // comment: Calcium leak flux from the network sarcoplasmic reticulum into the cytosol.
    i_leak = K_leak*Ca_NSR;
    K_leak = I_up/Ca_NSR_max;
    // comment: Translocation flux from the network to the junctional sarcoplasmic reticulum.
    i_tr = (Ca_NSR-Ca_JSR)/tau_tr;
  enddef;

  // comment: Component grouping together the differential equations for the various ionic concentrations that the model tracks.
  def comp ionic_concentrations as
    var Nai: mM {pub: out, init: 10.0};
    var Nao: mM {pub: out, init: 140.0};
    var Cai: mM {pub: out, init: 0.12e-3};
    var Cao: mM {pub: out, init: 1.8};
    var Ki: mM {pub: out, init: 145.0};
    var Ko: mM {pub: out, init: 5.4};
    var Ca_JSR: mM {pub: out, init: 1.8};
    var Ca_NSR: mM {pub: out, init: 1.8};
    var Am: per_mm {pub: in};
    // volume fractions
    var V_myo: dimensionless {init: 0.68};
    var V_JSR: dimensionless {init: 0.0048};
    var V_NSR: dimensionless {init: 0.0552};
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_CaNa: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_ns_Na: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_CaCa: uA_per_mm2 {pub: in};
    var i_CaK: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_ns_K: uA_per_mm2 {pub: in};
    var i_tr: mM_per_ms {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_leak: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    // comment: The change in intracellular sodium concentration.
    ode(Nai, time) = -(i_Na+i_CaNa+i_Na_b+i_ns_Na+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*(Am/(V_myo*F));
    // comment: The change in intracellular calcium concentration.
    ode(Cai, time) = -(i_CaCa+i_p_Ca+i_Ca_b-i_NaCa)*(Am/(2.0{dimensionless}*V_myo*F))+i_rel*(V_JSR/V_myo)+(i_leak-i_up)*(V_NSR/V_myo);
    // comment: The change in intracellular potassium concentration.
    ode(Ki, time) = -(i_CaK+i_K+i_K1+i_Kp+i_ns_K+(-(i_NaK*2.0{dimensionless})))*(Am/(V_myo*F));
    // comment: The change in calcium concentration in the junctional sarcoplasmic reticulum.
    ode(Ca_JSR, time) = -(i_rel-i_tr*(V_NSR/V_JSR));
    // comment: The change in calcium concentration in the network sarcoplasmic reticulum.
    ode(Ca_NSR, time) = -(i_leak+i_tr-i_up);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f_Ca_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_X_gate;
        comp time_dependent_potassium_current_Xi_gate;
      endcomp;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp plateau_potassium_current;
      comp sarcolemmal_calcium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp non_specific_calcium_activated_current;
      comp ionic_concentrations;
      comp calcium_fluxes_in_the_SR;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_X_gate;
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes_in_the_SR and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_ns_Ca and i_ns_Ca;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
    vars Am and Am;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_CaCa and i_CaCa;
    vars i_CaNa and i_CaNa;
    vars i_CaK and i_CaK;
  enddef;
  def map between time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_K and i_K;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Cai and Cai;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and ionic_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
  enddef;
  def map between calcium_fluxes_in_the_SR and ionic_concentrations for
    vars i_rel and i_rel;
    vars i_tr and i_tr;
    vars i_leak and i_leak;
    vars i_up and i_up;
    vars Cai and Cai;
    vars Ca_JSR and Ca_JSR;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between L_type_Ca_channel and non_specific_calcium_activated_current for
    vars gamma_Nao and gamma_Nao;
    vars gamma_Nai and gamma_Nai;
    vars gamma_Ko and gamma_Ko;
    vars gamma_Ki and gamma_Ki;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K1 and E_K1;
    vars time and time;
    vars V and V;
  enddef;
enddef;
