//   FILE :  jafri_rice_winslow_model_1998.xml
//
// CREATED :  September 2001
//
// LAST MODIFIED : 30th July 2003
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of the mammalian
// ventricular action potential based on the Jafri-Rice-Winslow model, 1998.  This
// model is a development of the LR-II model.  In particular, it makes an accurate
// model of the membrane currents and adds a more sophisticated model of calcium
// ion handling.
//
// CHANGES:
//   19/10/2001 - CML - Removed document type definition as this is declared as
//                      optional according to the W3C recommendation.
//   24/10/2001 - CML - Made changes to some of the metadata, bringing them up to
//                      date with the most recent working draft (26th September) of
//                      the Metadata specification.
//   07/12/2001 - CML - Changed tau_y_calculation after checking mathml using the
//                      validator.
//   04/01/2002 - CML - Altered some of the connections.
//   21/01/2002 - AAC - Updated metadata to conform to the 16/1/02 CellML Metadata
//                      1.0 Specification.
//   25/02/2002 - CML - Corrected several equations.
//   28/02/2002 - CML - Corrected several equations, variable units and their
//                      initial values.
//   06/05/2002 - CML - Added some initial values.
//   22/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   04/06/2003 - CML - Fixed MathML in a few components.
//   30/07/2003 - CML - Altered a few equations.
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit The Bioengineering Research Group
// created: W3CDTF 2001-09-24
// modification: Corrected equations.; Family Lloyd; Given Catherine; Other May; W3CDTF 2003-07-30
// modification: Corrected equations: alpha_j_calculation and beta_j_calculation in fast_sodium_current_j_gate, alpha_X_calculation and beta_X_calculation in time_dependent_potassium_current_X_gate, and f_NaK_calculation and i_NaK_calculation in Ca_release_current_from_JSR.; Family Lloyd; Given Catherine; Other May; W3CDTF 2003-06-04
// modification: Added some initial values from Penny Noble's documentation.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-05-06
// modification: Corrected several equations, variable units and their initial values.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-02-28
// modification: Corrected several equations.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-02-25
// modification: Altered some of the connections.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-01-04
// modification: Changed tau_y_calculation after checking mathml using the validator.; Family Lloyd; Given Catherine; Other May; W3CDTF 2001-12-07
// modification: Removed document type definition as this is declared as optional according to the W3C recommendation.; Family Lloyd; Given Catherine; Other May; W3CDTF 2001-10-19
// publisher: The University of Auckland, Bioengineering Research Group
// title: The Jafri-Rice-Winslow Model for Calcium Regulation in the Ventricular Myocyte, 1997
// comment: This is the CellML description of Jafri, Rice and Winslow's mathematical model for calcium regulation in the ventricular myocyte. It is based on an accurate model of the membrane currents and adds a more sophisticated model of calcium handling. The JRW model is based on the LR-II model for ventricular action potentials, with several modifications.; FN Catherine Lloyd
// species: Mammalia
// bio_entity: Ventricular Myocyte
// reference: Pubmed_id 9512016
// simulation: #simulation; multistepMethod bdf; iterationMethod newton; linearSolver dense; #time; maximumStepSize 0.01; tabulationStepSize 1.0; startingValue 0; endingValue 700
def model jafri_rice_winslow_model_1998 as
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The Publisher metadata.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "jafri_rice_winslow_model_1998", which is declared on
  // the <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  // The model is relevant to all mammals.
  //
  // The CellML Metadata Specification recommends that bibliographic metadata
  // is used to provide information about the original model reference.  The
  // "identifier" attribute on the "BibliographicReference" class provides an
  // elegant way to identify a cited reference using a database identifier            such as Pubmed.  All associated data such as author, journal title,
  // date, etc can be looked up on the database.
  // Below, we define some additional units for association with variables and
  // constants within the model. The identifiers are fairly self-explanatory.
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit per_mm as
    unit metre {pref: milli, expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mS_per_mm2 as
    unit siemens {pref: milli};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit mm2 as
    unit metre {pref: milli, expo: 2};
  enddef;
  def unit mM as
    unit mole {pref: nano};
    unit metre {pref: milli, expo: -3};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit per_mM3_per_ms as
    unit mM {expo: -3};
    unit ms {expo: -1};
  enddef;
  def unit per_mM4_per_ms as
    unit mM {expo: -4};
    unit ms {expo: -1};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit uA_per_mm2 as
    unit ampere {pref: micro};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit mm_per_ms as
    unit metre {pref: milli};
    unit ms {expo: -1};
  enddef;
  def unit gas_constant_units as
    unit joule {pref: pico};
    unit mole {pref: nano, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit faradays_constant_units as
    unit coulomb {pref: nano};
    unit mole {pref: nano, expo: -1};
  enddef;
  def unit uA_per_mmcu as
    unit ampere {pref: micro};
    unit metre {pref: milli, expo: -3};
  enddef;
  // The "environment" component is used to declare variables that are used by
  // all or most of the other components, in this case just "time".

  def comp environment as
    var time: ms {pub: out};
  enddef;
  // The "membrane" component is really the `root' node of our model.
  // It defines the action potential variable "V" among other things.

  // comment: The main component of the model which defines the action potential.
  def comp membrane as
    // These variables are defined here and used in other components.
    var V: mV {pub: out, init: -84.1638};
    var R: gas_constant_units {pub: out, init: 8.3145e3};
    var T: kelvin {pub: out, init: 310.0};
    var F: faradays_constant_units {pub: out, init: 9.6845e4};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Ca_L_Ca: uA_per_mm2 {pub: in};
    var i_Ca_L_K: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_ns_Ca: uA_per_mm2 {pub: in};
    var Am: per_mm {pub: in};
    // These variables is defined here and only used internally.
    var Cm: uF_per_mm2 {init: 0.01};
    var I_stim: uA_per_mm2;
    var stimTime: ms {init: 100.0};
    var stimDuration: ms {init: 1.0};
    var stimCurrent: uA_per_mmcu {init: 250};
    // comment: The kinetics of the transmembrane potential, defined as the sum of all the sarcolemmal currents and an applied stimulus current.
    ode(V, time) = (I_stim-(i_Na+i_Ca_L_Ca+i_Ca_L_K+i_K+i_NaCa+i_K1+i_Kp+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca))/Cm;
    I_stim = sel
      case (time >= stimTime) and (time <= stimTime+stimDuration):
        stimCurrent/Am;
      otherwise:
        0.0{uA_per_mmsq};
    endsel;
  enddef;

  // comment: The fast sodium current component contains the differential equations governing the influx of sodium ions through the cell surface membrane into the cell.
  def comp fast_sodium_current as
    // These variables are defined here and used in other components.
    var i_Na: uA_per_mm2 {pub: out};
    var E_Na: mV {pub: out};
    // This variable is defined here and only used internally.
    var g_Na: mS_per_mm2 {init: 0.128};
    //
    // Time is imported from the environment, and membrane potential is
    // imported from the membrane component.  These variables are used in the
    // "sodium_current" parent component, which also acts as an interface,
    // passing the variables to its encapsulated gate components.
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    // These variables are imported from encapsulated components.
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    // comment: Calculation of the fast sodium current using the three Hodkin-Huxley type voltage-dependent gating variables m, h, and j.
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V-E_Na);
    // comment: The sodium reversal potential.
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;
  // The "fast_sodium_current_m_gate" is the m gate encapsulated inside the fast
  // sodium current.

  // comment: The voltage-dependent activation gate for the fast sodium current - the m gate.
  def comp fast_sodium_current_m_gate as
    // This variable is defined here and used in other components.
    var m: dimensionless {pub: out, init: 0.0328302};
    // These variables are defined here and only used internally.
    var alpha_m: per_ms;
    var beta_m: per_ms;
    //
    // These variables are imported from the environment and the membrane via
    // the "fast_sodium_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the m gate.
    alpha_m = 0.32{per_mV_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    // comment: The closing rate of the m gate.
    beta_m = 0.08{per_ms}*exp(-V/11.0{mV});
    // comment: The kinetics of the m gate.
    ode(m, time) = alpha_m*(1.0{per_mV}-m)-beta_m*m;
  enddef;
  // The "fast_sodium_current_h_gate" component is the h gate encapsulated in
  // the fast sodium current.

  // comment: The voltage-dependent inactivation gate for the fast sodium current - the h gate.
  def comp fast_sodium_current_h_gate as
    // This variable is defined here and used in other components.
    var h: dimensionless {pub: out, init: 0.988354};
    // These variables are defined here and only used internally.
    var alpha_h: per_ms;
    var beta_h: per_ms;
    //
    // These variables are imported from the environment and the membrane via
    // the "fast_sodium_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the h gate.
    alpha_h = sel
      case V < -40.0{mV}:
        0.135{per_ms}*exp((80.0{mV}+V)/(-6.8{mV}));
      otherwise:
        0.0{per_ms};
    endsel;
    // comment: The closing rate of the h gate.
    beta_h = sel
      case V < -40.0{mV}:
        3.56{per_ms}*exp(0.079{mV}*V)+310000.0{per_ms}*exp(0.35{per_mV}*V);
      otherwise:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))));
    endsel;
    // comment: The kinetics of the h gate.
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;
  // The "fast_sodium_current_j_gate" component is the j gate encapsulated in
  // the fast sodium current.

  // comment: The voltage-dependent slow inactivation gate for the fast sodium current - the j gate.
  def comp fast_sodium_current_j_gate as
    // This variable is defined here and used in other components.
    var j: dimensionless {pub: out, init: 0.992540};
    // These variables are defined here and only used internally.
    var alpha_j: per_ms;
    var beta_j: per_ms;
    //
    // These variables are imported from the environment and the membrane via
    // the "fast_sodium_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the j gate.
    alpha_j = sel
      case V < -40.0{mV}:
        (-127140.0{per_mV_ms}*exp(0.2444{per_mV}*V)-0.00003474{per_mV_ms}*exp(-0.04391{per_mV}*V))*((V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV}))));
      otherwise:
        0.0{per_ms};
    endsel;
    // comment: The closing rate of the j gate.
    beta_j = sel
      case V < -40.0{mV}:
        0.1212{per_ms}*(exp(-0.01052{per_mV}*V)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}))));
      otherwise:
        0.3{per_ms}*(exp(-0.0000002535{per_mV}*V)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV}))));
    endsel;
    // comment: The kinetics of the j gate.
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  // comment: The JWR model creates a new mathematical model to describe the L-type calcium channel that is based on the experimentally observed mode-switching behaviour of the channel. Inactivation occurs as calcium ion binding induces the channel to switch (from mode normal) to a mode in which transitions to open states are extremely slow (mode Ca). The channel has one voltage inactivation gate, y. As well as Ca, the channel is assumed permeable to K ions also.
  def comp L_type_Ca_channel as
    // These variables are defined here and used in other components.
    var i_Ca_L_Ca: uA_per_mm2 {pub: out};
    var i_Ca_L_K: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var P_Ca: mm_per_ms {init: 33.75e-6};
    var P_K: mm_per_ms {init: 1.0e-9};
    var p_k: mm_per_ms;
    var i_Ca_L_Ca_half: uA_per_mm2 {init: -4.58e-3};
    var i_Ca_L_Ca_max: uA_per_mm2;
    var O: dimensionless {init: 9.84546e-21};
    var O_Ca: dimensionless {init: 0.0};
    var alpha: per_ms;
    var beta: per_ms;
    var gamma: per_ms;
    var alpha_a: per_ms;
    var beta_b: per_ms;
    var a: dimensionless {init: 2.0};
    var b: dimensionless {init: 2.0};
    var g: per_ms {init: 2.0};
    var f: per_ms {init: 0.3};
    var g_: per_ms {init: 0.0};
    var f_: per_ms {init: 0.0};
    var omega: per_ms {init: 0.01};
    var C0: dimensionless {init: 0.997208};
    var C1: dimensionless {init: 6.38897e-5};
    var C2: dimensionless {init: 1.535e-9};
    var C3: dimensionless {init: 1.63909e-14};
    var C4: dimensionless {init: 6.56337e-20};
    var C_Ca0: dimensionless {init: 2.72826e-3};
    var C_Ca1: dimensionless {init: 6.99215e-7};
    var C_Ca2: dimensionless {init: 6.71989e-11};
    var C_Ca3: dimensionless {init: 2.87031e-15};
    var C_Ca4: dimensionless {init: 4.59752e-20};
    // These variables are imported from other components.
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Ca_SS: mM {pub: in};
    var Cao: mM {pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    // These variables are imported from encapsulated components.
    var y: dimensionless {priv: in};
    // comment: Calculation of the calcium current component of the total channel current, given as the maximal current multiplied by the voltage-dependent inactivation gate and the open probability of the channel based on the mode-switching model.
    i_Ca_L_Ca = i_Ca_L_Ca_max*y*(O+O_Ca);
    // comment: Calculation of the potassium current component of the total channel current.
    i_Ca_L_K = p_k*y*(O+O_Ca)*(V*sqr(F)/(R*T))*((Ki*exp(V*F/(R*T))-Ko)/(exp(V*F/(R*T))-1.0{dimensionless}));
    // comment: The potassium permeability of the channel, which depends on the calcium current component.
    p_k = P_K/(1.0{dimensionless}+i_Ca_L_Ca_max/i_Ca_L_Ca_half);
    // comment: The maximal calcium current through the channel.
    i_Ca_L_Ca_max = P_Ca*4.0{dimensionless}*(V*sqr(F)/(R*T))*((0.001{dimensionless}*exp(2.0{dimensionless}*V*(F/(R*T)))-0.341{dimensionless}*Cao)/(exp(2.0{dimensionless}*V*(F/(R*T)))-1.0{dimensionless}));
    // comment: Rate constants for state changes in mode normal.
    alpha = 0.4{per_ms}*exp((V+12.0{mV})/10.0{mV});
    beta = 0.05{per_ms}*exp((V+12.0{mV})/(-13.0{mV}));
    // comment: Rate constants for state changes in mode Ca (corresponding to alpha-prime and beta-prime in the JRW paper).
    alpha_a = alpha*a;
    beta_b = beta/b;
    // comment: Rate constant for switching between mode normal and mode Ca.
    gamma = 0.1875{dimensionless}*Ca_SS;
    // comment: The kinetics of the state transitions in mode normal. In the normal mode, the calcium channel is able to make the transition to the open, conducting state (O) from the closed state (C) at a normal rate.
    ode(C0, time) = beta*C1+omega*C_Ca0-(4.0{dimensionless}*alpha+gamma)*C0;
    ode(C1, time) = 4.0{dimensionless}*alpha*C0+2.0{dimensionless}*beta*C2+omega/b*C_Ca1-(beta+3.0{dimensionless}*alpha+gamma*a)*C1;
    ode(C2, time) = 3.0{dimensionless}*alpha*C1+3.0{dimensionless}*beta*C3+omega/sqr(b)*C_Ca2-(beta*2.0{dimensionless}+2.0{dimensionless}*alpha+gamma*sqr(a))*C2;
    ode(C3, time) = 2.0{dimensionless}*alpha*C2+4.0{dimensionless}*beta*C4+omega/pow(b, 3.0{dimensionless})*C_Ca3-(beta*3.0{dimensionless}+alpha+gamma*pow(a, 3.0{dimensionless}))*C3;
    ode(C4, time) = alpha*C3+g*O+omega/pow(b, 4.0{dimensionless})*C_Ca4-(beta*4.0{dimensionless}+f+gamma*pow(a, 4.0{dimensionless}))*C4;
    ode(O, time) = f*C4-g*O;
    // comment: The kinetics of the state transitions in mode Ca. Calcium binding to the Ca channel induces a conformational change from normal mode to mode Ca. This effectively inhibits the conduction of calcium ions because in mode Ca, the calcium channel makes the transition to the open, conducting state (O) extremely slowly.
    ode(C_Ca0, time) = beta_b*C_Ca1+gamma*C_Ca0-(4.0{dimensionless}*alpha_a+omega)*C_Ca0;
    ode(C_Ca1, time) = 4.0{dimensionless}*alpha_a*C_Ca0+2.0{dimensionless}*beta_b*C_Ca2+gamma*a*C1-(beta_b+3.0{dimensionless}*alpha_a+omega/b)*C_Ca1;
    ode(C_Ca2, time) = 3.0{dimensionless}*alpha_a*C_Ca1+3.0{dimensionless}*beta_b*C_Ca3+gamma*sqr(a)*C2-(beta_b*2.0{dimensionless}+2.0{dimensionless}*alpha_a+omega/sqr(b))*C_Ca2;
    ode(C_Ca3, time) = 2.0{dimensionless}*alpha_a*C_Ca2+4.0{dimensionless}*beta_b*C_Ca4+gamma*pow(a, 3.0{dimensionless})*C3-(beta_b*3.0{dimensionless}+alpha_a+omega/pow(b, 3.0{dimensionless}))*C_Ca3;
    ode(C_Ca4, time) = alpha_a*C_Ca3+g_*O_Ca+gamma*pow(a, 4.0{dimensionless})*C4-(beta_b*4.0{dimensionless}+f_+omega/pow(b, 4.0{dimensionless}))*C_Ca4;
    ode(O_Ca, time) = f_*C_Ca4-g_*O_Ca;
  enddef;
  //
  // The "L_type_Ca_channel" component has an encapsulated voltage inactivation
  // gate, y.

  // comment: The voltage-dependent inactivation gate for the L-type calcium channel - the y gate.
  def comp L_type_Ca_channel_y_gate as
    // this variable is defined here and used in other components.
    var y: dimensionless {pub: out, init: 0.998983};
    // These variables are defined here and only used internally.
    var y_infinity: dimensionless;
    var tau_y: dimensionless;
    //
    // These variables are imported from the environment and the membrane via
    // the "L_type_Ca_channel" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The kinetics of the y gate.
    ode(y, time) = (y_infinity-y)/tau_y;
    y_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+55.0{mV})/7.5{mV}))+0.1{dimensionless}/(1.0{dimensionless}+exp((-V+21.0{mV})/6.0{mV}));
    tau_y = 20.0{dimensionless}+600.0{dimensionless}/(1.0{dimensionless}+exp((V+30.0{mV})/9.5{mV}));
  enddef;
  // The time-dependent potassium current has an X^2 dependence on it's
  // activation gate, and an Xi inactivation gate.  These are encapsulated in the
  // parent "time_dependent_potassium_current" component.

  // comment: The time-dependent potassium current has an X^2 dependence on it's activation gate, and an Xi inactivation gate. This channel is also assumed permeable to sodium ions.
  def comp time_dependent_potassium_current as
    // This variable is defined here and used in other components.
    var i_K: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_K: mS_per_mm2;
    var g_K_max: mS_per_mm2 {init: 0.001128};
    var E_K: mV;
    var P_NaK: dimensionless {init: 0.01833};
    // These variables are imported from other components.
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    // These variables are imported from encapsulated components.
    var X: dimensionless {priv: in};
    var Xi: dimensionless {priv: in};
    // comment: Calculation of the maximal channel conductance, dependent on extracellular potassium concentration.
    g_K = g_K_max*sqrt(Ko/5.4{mM});
    // comment: The reversal potential of the channel.
    E_K = R*T/F*ln((Ko+P_NaK*Nao)/(Ki+P_NaK*Nai));
    // comment: Calculation of the time-dependent potassium current.
    i_K = g_K*Xi*sqr(X)*(V-E_K);
  enddef;
  //
  // The "time_dependent_potassium_current_X_gate" component is the
  // time-dependent activation gate encapsulated in the rapid_time-dependent
  // potassium current.

  // comment: The voltage- and time-dependent activation gate for the time-dependent potassium current - the X gate.
  def comp time_dependent_potassium_current_X_gate as
    // This variable is defined here and used in other components.
    var X: dimensionless {pub: out, init: 0.000928836};
    // These variables are defined here and only used internally.
    var alpha_X: per_ms;
    var beta_X: per_ms;
    //
    // These variables are imported from the environment and the membrane via
    // the "time_dependent_potassium_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The opening rate of the X gate.
    alpha_X = 0.0000719{per_mV_ms}*((V+30.0{mV})/(1.0{dimensionless}-exp(-0.148{per_mV}*(V+30.0{mV}))));
    // comment: The closing rate of the X gate.
    beta_X = 0.000131{per_mV_ms}*((V+30.0{mV})/(-1.0{dimensionless}+exp(0.0687{per_mV}*(V+30.0{mV}))));
    // comment: The kinetics of the X gate.
    ode(X, time) = alpha_X*(1.0{dimensionless}-X)-beta_X*X;
  enddef;
  //
  // The "time_dependent_potassium_current_Xi_gate" component is the
  // time-independent inactivation gate encapsulated in the time-dependent
  // potassium current.

  // comment: The time-independent inactivation gate for the time-dependent potassium channel.
  def comp time_dependent_potassium_current_Xi_gate as
    // This variable is defined here and used in other components.
    var Xi: dimensionless {pub: out};
    //
    // These variables are imported from the "environment" and the "membrane" via
    // the "time_dependent_potassium_current" component.
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: Xi is the inward rectification parameter and is given by the following equation.
    Xi = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-56.26{mV})/32.1{mV}));
  enddef;
  //
  // The "time_independent_potassium_current" component contains a single
  // inactivation gate (K1) whose time constant is small enough that it
  // can be approximated by its steady-state value K1_infinity.

  // comment: The time-independent potassium current.
  def comp time_independent_potassium_current as
    // These variables are defined here and used in other components.
    var i_K1: uA_per_mm2 {pub: out};
    var E_K1: mV {pub: out, priv: out};
    // This variable is defined here and only used internally.
    var g_K1: mS_per_mm2;
    var g_K1_max: mS_per_mm2 {init: 7.5e-3};
    //
    // These variables are imported from other components.  They are all used in
    // the parent "time_independent_potassium_current" component and some are
    // also passed via this interface to the encapsulated gates.
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    // This variable is imported from an encapsulated component.
    var K1_infinity: dimensionless {priv: in};
    // comment: Calculation of the maximal channel conductance, dependent on extracellular potassium concentration.
    g_K1 = g_K1_max*sqrt(Ko/5.4{mM});
    // comment: The following equation calculates the reversal potential of the time-independent potassium current.
    E_K1 = R*T/F*ln(Ko/Ki);
    // comment: Calculate the current.
    i_K1 = g_K1*K1_infinity*(V-E_K1);
  enddef;
  // The "time_independent_potassium_current_K1_gate" component is the K1 gate
  // encapsulated in the time-independent potassium current.

  // comment: The time constants for the K1 gate are small enough that the gating variable can be approximated with it's steady-state value.
  def comp time_independent_potassium_current_K1_gate as
    // This variable is defined here and used in other components.
    var K1_infinity: dimensionless {pub: out};
    // These variables are defined here and only used internally.
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    //
    // These variables are imported from the "environment", "membrane" and
    // "time_independent_potassium_current" components.
    var V: mV {pub: in};
    var time: ms {pub: in};
    var E_K1: mV {pub: in};
    // comment: The opening rate of the K1 gate.
    alpha_K1 = 1.02{per_ms}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V-E_K1-59.215{mV})));
    // comment: The closing rate of the K1 gate.
    beta_K1 = (0.49124{per_ms}*exp(0.08032{dimensionless}*(V+5.476{mV}-E_K1))+exp(0.06175{dimensionless}*(V-(E_K1+594.31{mV}))))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V-E_K1+4.753{mV})));
    // comment: The steady-state approximation for the K1 gating kinetics.
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;
  //
  // The "plateau_potassium_current" component contains the equations
  // which describe the contribution of a time independent
  // [K]o-insensitive channel at plateau potentials.

  // comment: The plateau potassium current component contains the equations which describe the contribution of a time independent [K]o-insensitive channel at plateau potentials.
  def comp plateau_potassium_current as
    // This variable is defined here and used in other components.
    var i_Kp: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var E_Kp: mV;
    var g_Kp: mS_per_mm2 {init: 8.28e-5};
    var Kp: dimensionless;
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_K1: mV {pub: in};
    // comment: The channel's reversal potential.
    E_Kp = E_K1;
    // comment: The activation variable.
    Kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
    // comment: Calculation of the plateau potassium current.
    i_Kp = g_Kp*Kp*(V-E_Kp);
  enddef;
  // The "Na_Ca_exchanger" component describes how a protein molecule in the cell
  // surface membrane transports Na ions into the cytosol and exports Ca ions
  // into the extracellular matrix, in a ratio of 3:1 respectively.

  // comment: The Na/Ca exchanger component describes how a protein molecule in the cell surface membrane transports Na ions into the cytosol and exports Ca ions into the extracellular volume, in a ratio of 3:1 respectively.
  def comp Na_Ca_exchanger as
    // This variable is defined here and used in other components.
    var i_NaCa: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var k_NaCa: uA_per_mm2 {init: 50.0};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var k_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    // These variables are imported in from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    // comment: Calculation of the Na/Ca exchanger current.
    i_NaCa = k_NaCa*(1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless})))*(1.0{dimensionless}/(K_mCa+Cao))*(1.0{dimensionless}/(1.0{dimensionless}+k_sat*exp((eta-1.0{dimensionless})*V*(F/(R*T)))))*(exp(eta*V*(F/(R*T)))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V*(F/(R*T)))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;
  // The "sarcolemmal_calcium_pump" is an additional mechanism for removing Ca
  // ions from the myoplasm to help maintain a low intracellular calcium
  // concentration when at rest.

  // comment: The sarcolemmal calcium pump is an additional mechanism for removing Ca ions from the myoplasm to help maintain a low intracellular calcium concentration when at rest.
  def comp sarcolemmal_calcium_pump as
    // This variable is defined here and used in other components.
    var i_p_Ca: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var K_mpCa: mM {init: 0.5e-3};
    var I_pCa: uA_per_mm2 {init: 1.15e-2};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    // comment: The calcium pump current.
    i_p_Ca = I_pCa*(Cai/(K_mpCa+Cai));
  enddef;
  //
  // The "sodium_background_current" is a time-independent diffusion of Na ions
  // down their electrochemical gradient, through the cell surface membrane into
  // the cytosol.

  // comment: The sodium background current is a time-independent diffusion of Na ions down their electrochemical gradient, through the cell surface membrane into the cytosol.
  def comp sodium_background_current as
    // This variable is defined here and used in other components.
    var i_Na_b: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_Nab: mS_per_mm2 {init: 1.41e-5};
    var E_NaN: mV;
    //
    // Time and membrane potential are imported from the "environment" and the
    // "membrane" components.  The reversal potential is imported from the
    // "fast_sodium_current" component.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    // comment: The reversal potential for the background sodium channel.
    E_NaN = E_Na;
    // comment: Calculation of the background sodium current.
    i_Na_b = g_Nab*(V-E_NaN);
  enddef;
  // The "calcium_background_current" describes a time-independent diffusion of
  // Ca ions down their electrochemical gradient through the cell surface
  // membrane into the cytosol.  However, calcium is not allowed to accumulate to
  // high intracellular concentrations.  This influx is balanced by the Ca ion
  // extrusion through the Na-Ca exchanger and the sarcolemmal Ca pump.

  // comment: The calcium background current describes a time-independent diffusion of Ca ions down their electrochemical gradient through the cell surface membrane into the cytosol. However, calcium is not allowed to accumulate to high intracellular concentrations. This influx is balanced by the Ca ion extrusion through the Na-Ca exchanger and the sarcolemmal Ca pump.
  def comp calcium_background_current as
    // This variable is defined here and used in other components.
    var i_Ca_b: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var g_Cab: mS_per_mm2 {init: 6.032e-5};
    var E_CaN: mV;
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    // comment: The reversal potential for the background calcium current.
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    // comment: Calculation of the background calcium current.
    i_Ca_b = g_Cab*(V-E_CaN);
  enddef;
  //
  // The "sodium_potassium_pump" is an active protein in the cell membrane which
  // couples the free energy released by the hydrolysis of ATP to the movement of
  // Na and K ions against their electrochemical gradients through the cell
  // surface membrane.

  // comment: The sodium potassium pump is an active protein in the cell membrane which couples the free energy released by the hydrolysis of ATP to the movement of Na and K ions against their electrochemical gradients through the cell membrane.
  def comp sodium_potassium_pump as
    // This variable is defined here and used in other components.
    var i_NaK: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var I_NaK: uA_per_mm2 {init: 0.013};
    var f_NaK: dimensionless;
    var K_mNai: mM {init: 10.0};
    var K_mKo: mM {init: 1.5};
    var sigma: dimensionless;
    // These variables are imported from other components.
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    // comment: Calculation of the Na/K pump current.
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{dimensionless})-1.0{dimensionless});
    i_NaK = I_NaK*f_NaK*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless})))*(Ko/(Ko+K_mKo));
  enddef;
  // The "non_specific_calcium_activated_current" describes a channel which is
  // activated by calcium ions, but is permeable to only sodium and potassium
  // ions.

  // comment: The nonspecific calcium activated current describes a channel which is activated by calcium ions, but is permeable to only sodium and potassium ions.
  def comp non_specific_calcium_activated_current as
    // \
    // These variables are defined here and used in other components.
    var i_ns_Ca: uA_per_mm2 {pub: out};
    var i_ns_Na: uA_per_mm2 {pub: out};
    var i_ns_K: uA_per_mm2 {pub: out};
    // These variables are defined here and only used internally.
    var I_ns_Na: uA_per_mm2;
    var I_ns_K: uA_per_mm2;
    var K_m_ns_Ca: mM {init: 1.2e-3};
    var P_ns_Ca: mm_per_ms {init: 1.75e-9};
    var EnsCa: mV;
    var VnsCa: mV;
    //
    // Time and membrane potential are imported from the "environment" and the
    // "membrane" components.  Intracellular calcium concentration is imported
    // from the "ionic_concentrations" component.
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    // comment: The reversal potential of the channel.
    EnsCa = R*T/F*ln((Ko+Nao)/(Ki+Nai));
    // comment: The potential offset for the channel.
    VnsCa = V-EnsCa;
    // comment: The sodium component of the channel's current.
    i_ns_Na = I_ns_Na*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    // comment: The potassium component of the channel's current.
    i_ns_K = I_ns_K*(1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless})));
    // comment: The total nonspecific calcium activated current.
    i_ns_Ca = i_ns_Na+i_ns_K;
    // comment: The maximal sodium component current.
    I_ns_Na = P_ns_Ca*sqr(1.0{dimensionless})*(VnsCa*sqr(F)/(R*T))*((0.75{dimensionless}*Nai*exp(VnsCa*F/(R*T))-0.75{dimensionless}*Nao)/(exp(VnsCa*F/(R*T))-1.0{dimensionless}));
    // comment: The maximal potassium component current.
    I_ns_K = P_ns_Ca*sqr(1.0{dimensionless})*(VnsCa*sqr(F)/(R*T))*((0.75{dimensionless}*Ki*exp(VnsCa*F/(R*T))-0.75{dimensionless}*Ko)/(exp(VnsCa*F/(R*T))-1.0{dimensionless}));
  enddef;
  // In the JRW model, subcellular calcium regulatory mechanisms are described in
  // detail.  There are six calcium fluxes to consider; J_rel, J_leak, J_up,
  // J_tr, J_xfer and J_trpn.  In addition, three membrane current fluxes are
  // also necessary for the formulation of calcium regulation; i_p_Ca, i_Ca_L_Ca
  // and i_NaCa.  The equations to calculate these fluxes are contained within
  // the "calcium_subsystem" component.

  // comment: In the JRW model, subcellular calcium regulatory mechanisms are described in detail. There are six calcium fluxes to consider; J_rel, J_leak, J_up, J_tr, J_xfer and J_trpn. In addition, three membrane current fluxes are also necessary for the formulation of calcium regulation; i_p_Ca, i_Ca_L_Ca and i_NaCa.
  def comp calcium_subsystem as
    // These variables are defined here and used in other components.
    var Cai: mM {pub: out, init: 9.94893e-11};
    var Ca_SS: mM {pub: out, init: 1.36058e-4};
    var Am: per_mm {pub: out, init: 546.69};
    var V_myo: dimensionless {pub: out, init: 0.92};
    // These variables are defined here and only used internally.
    var RyR_open: dimensionless;
    var P_O1: dimensionless {init: 1.19168e-3};
    var P_O2: dimensionless {init: 6.30613e-9};
    var P_C1: dimensionless {init: 0.762527};
    var P_C2: dimensionless {init: 0.236283};
    var v1: per_ms {init: 1.8};
    var v2: per_ms {init: 0.58e-4};
    var v3: mM_per_ms {init: 1.8e-3};
    var nCa: dimensionless {init: 4.0};
    var mCa: dimensionless {init: 3.0};
    var k_a_plus: per_mM4_per_ms {init: 1.215e10};
    var k_a_minus: per_ms {init: 0.1425};
    var k_b_plus: per_mM3_per_ms {init: 4.05e7};
    var k_b_minus: per_ms {init: 1.930};
    var k_c_plus: per_ms {init: 0.018};
    var k_c_minus: per_ms {init: 0.0008};
    var k_htrpn_plus: per_mM_per_ms {init: 20.0};
    var k_htrpn_minus: per_ms {init: 0.066e-3};
    var k_ltrpn_plus: per_mM_per_ms {init: 40.0};
    var k_ltrpn_minus: per_ms {init: 0.04};
    var tau_tr: ms {init: 34.48};
    var Ca_JSR: mM {init: 1.17504};
    var Ca_NSR: mM {init: 1.243891};
    var V_JSR: dimensionless;
    var V_NSR: dimensionless;
    var V_SS: dimensionless;
    var K_mup: mM {init: 0.5e-3};
    var K_mCMDN: mM {init: 2.38e-3};
    var K_mCSQN: mM {init: 0.8};
    var tau_xfer: ms {init: 3.125};
    var HTRPN_tot: mM {init: 0.14};
    var LTRPN_tot: mM {init: 0.07};
    var HTRPNCa: mM {init: 0.13598};
    var LTRPNCa: mM {init: 0.00635};
    var CSQN_tot: mM {init: 15.0};
    var CMDN_tot: mM {init: 0.05};
    var Bi: dimensionless;
    var B_SS: dimensionless;
    var B_JSR: dimensionless;
    var J_rel: mM_per_ms;
    var J_leak: mM_per_ms;
    var J_up: mM_per_ms;
    var J_tr: mM_per_ms;
    var J_xfer: mM_per_ms;
    var J_trpn: mM_per_ms;
    var J_htrpn: mM_per_ms;
    var J_ltrpn: mM_per_ms;
    // These variables are imported from other components.
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_Ca_L_Ca: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    // comment: Calculate some volume fractions as proportions of the total myoplasmic volume.
    V_SS = 5.828e-5{dimensionless}*V_myo;
    V_NSR = 0.081{dimensionless}*V_myo;
    V_JSR = 0.00464{dimensionless}*V_myo;
    // comment: The calcium release flux from the JSR into the restricted subspace is governed by the fraction of RyR channels in an open state.
    J_rel = v1*RyR_open*(Ca_JSR-Ca_SS);
    // comment: The "open" RyR's are those P_O1 and P_O2 states.
    RyR_open = P_O1+P_O2;
    // comment: The kinetic equations governing the transitions between the four states used to model the RyR's.
    ode(P_C1, time) = -k_a_plus*pow(Ca_SS, nCa)*P_C1+k_a_minus*P_O1;
    ode(P_O1, time) = k_a_plus*pow(Ca_SS, nCa)*P_C1-(k_a_minus*P_O1+k_b_plus*pow(Ca_SS, mCa)*P_O1+k_c_plus*P_O1)+k_b_minus*P_O2+k_c_minus*P_C2;
    ode(P_O2, time) = k_b_plus*pow(Ca_SS, mCa)*P_O1-k_b_minus*P_O2;
    ode(P_C2, time) = k_c_plus*P_O1-k_c_minus*P_C2;
    // comment: Calculate the leakage flux from the NSR into the myoplasm.
    J_leak = v2*(Ca_NSR-Cai);
    // comment: Calculate the uptake flux into the NSR from the myoplasm.
    J_up = v3*(sqr(Cai)/(sqr(K_mup)+sqr(Cai)));
    // comment: Calculate the translocation flux between the uptake (NSR) and release (JSR) stores.
    J_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    // comment: Calculate the calcium flux from the diffusion of calcium out of the restricted subspace into the myoplasm.
    J_xfer = (Ca_SS-Cai)/tau_xfer;
    // comment: The kinetics of calcium binding to the myoplasm buffer troponin - both high and low affinity binding sites.
    J_htrpn = k_htrpn_plus*Cai*(HTRPN_tot-HTRPNCa)-k_htrpn_minus*HTRPNCa;
    J_ltrpn = k_ltrpn_plus*Cai*(LTRPN_tot-LTRPNCa)-k_ltrpn_minus*LTRPNCa;
    J_trpn = J_htrpn+J_ltrpn;
    // comment: Keep track of the concentration of calcium ions bound to high and low affinity troponin binding sites.
    ode(HTRPNCa, time) = J_htrpn;
    ode(LTRPNCa, time) = J_ltrpn;
    // comment: Calcium is buffered by calmodulin (CMDN) in the subspace and myoplasm, and by calsequestrin (CSQN) in the JSR. These are fast buffers and their effect is modelled using the rapid buffering approximation.
    Bi = 1.0{dimensionless}/(1.0{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Cai));
    B_SS = 1.0{dimensionless}/(1.0{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_SS));
    B_JSR = 1.0{dimensionless}/(1.0{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
    // comment: The kinetics of the calcium ion concentration changes in the various compartments of the model.
    ode(Cai, time) = Bi*(J_leak+J_xfer-(J_up+J_trpn+(i_Ca_b-2.0{dimensionless}*i_NaCa+i_p_Ca)*(Am/(2.0{dimensionless}*V_myo*F))));
    ode(Ca_SS, time) = B_SS*(J_rel*(V_JSR/V_SS)-J_xfer*(V_myo/V_SS)-i_Ca_L_Ca*(Am/(2.0{dimensionless}*V_SS*F)));
    ode(Ca_JSR, time) = B_JSR*(J_tr-J_rel);
    ode(Ca_NSR, time) = (J_up-J_leak)*(V_myo/V_NSR)-J_tr*(V_JSR/V_NSR);
  enddef;
  // The descriptions of the rate of change of [Na]i and [K]i are the same as the
  // LR-II model.  In addition to the LR-II model, both high and low affinity
  // calcium binding sites are included for troponin (Tn).

  // comment: The descriptions of the rate of change of [Na]i and [K]i are the same as the LR-II model.
  def comp ionic_concentrations as
    // these variables are defined here and used in other components
    var Nai: mM {pub: out, init: 10.2042};
    var Nao: mM {pub: out, init: 140.0};
    var Ki: mM {pub: out, init: 143.727};
    var Ko: mM {pub: out, init: 5.4};
    var Cao: mM {pub: out, init: 1.8};
    // These variables are imported from other components.
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_ns_Na: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_Ca_L_K: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_ns_K: uA_per_mm2 {pub: in};
    var Am: per_mm {pub: in};
    var V_myo: dimensionless {pub: in};
    // comment: The rate of change of intracellular sodium ion concentration.
    ode(Nai, time) = -(i_Na+i_Na_b+i_ns_Na+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*(Am/(V_myo*F));
    // comment: The rate of change of intracellular potassium ion concentration.
    ode(Ki, time) = -(i_Ca_L_K+i_K+i_K1+i_Kp+i_ns_K+(-(i_NaK*2.0{dimensionless})))*(Am/(V_myo*F));
    // comment: The rate of change of extracellular potassium ion concentration.
    ode(Ko, time) = (i_Ca_L_K+i_K+i_K1+i_Kp+i_ns_K+(-(i_NaK*2.0{dimensionless})))*(Am/(V_myo*F));
  enddef;
  // The following <group> element specifies a single containment hierarchy
  // that encompasses all of the components in the model, with the exception of
  // the "environment" component.  The "containment" relationship is used to
  // describe geometric hierarchies - or how components are physically arranged
  // in relation to eachother.

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_y_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_X_gate;
        comp time_dependent_potassium_current_Xi_gate;
      endcomp;
      comp Na_Ca_exchanger;
      comp time_independent_potassium_current incl
        comp time_independent_potassium_current_K1_gate;
      endcomp;
      comp plateau_potassium_current;
      comp sarcolemmal_calcium_pump;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp non_specific_calcium_activated_current;
      comp calcium_subsystem;
      comp ionic_concentrations;
    endcomp;
  enddef;
  // The following <group> element specifies how the components
  // representing activation and inactivation coefficients are
  // encapsulated inside the sodium and potassium channel components.
  // Encapsulation describes the logical hierarchy of components in a network,
  // and may or may not reflect their physical arrangement.

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_y_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_X_gate;
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  // "Time" is passed from the "environment" component into the
  // "membrane" and current components.
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between calcium_subsystem and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  // Several variables are passed between the "membrane" and its sub-components.
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
    vars i_Ca_L_K and i_Ca_L_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars i_ns_Ca and i_ns_Ca;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_subsystem for
    vars F and F;
    vars Am and Am;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  // Several variables are passed between the sibling components.
  def map between fast_sodium_current and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_Na and i_Na;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and calcium_subsystem for
    vars Ca_SS and Ca_SS;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars i_Ca_L_K and i_Ca_L_K;
    vars Ki and Ki;
    vars Ko and Ko;
    vars Cao and Cao;
  enddef;
  def map between time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_K and i_K;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Cao and Cao;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and calcium_subsystem for
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between sarcolemmal_calcium_pump and calcium_subsystem for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between calcium_background_current and calcium_subsystem for
    vars Cai and Cai;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars Cao and Cao;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between non_specific_calcium_activated_current and calcium_subsystem for
    vars Cai and Cai;
  enddef;
  def map between ionic_concentrations and calcium_subsystem for
    vars Am and Am;
    vars V_myo and V_myo;
  enddef;
  //
  // Various variables are passed between parent components and their
  // encapsulated gates.
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars time and time;
    vars V and V;
    vars E_K1 and E_K1;
    vars K1_infinity and K1_infinity;
  enddef;
enddef;
