//   FILE :  noble_model_1998.xml
//
// CREATED :  18th December 2001
//
// LAST MODIFIED : 22nd July 2002
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Noble's 1998 improved
// guinea-pig ventricular cell model.
//
// CHANGES:
//   04/01/2002 - CML - Altered some of the connections.
//   21/01/2002 - AAC - Updated metadata to conform to the 16/1/02 CellML Metadata
//                      1.0 Specification.
//   25/02/2002 - CML - Corrected i_K1 and i_K_ACh calculations.
//   26/02/2002 - CML - Corrected several more equations.
//   01/03/2002 - CML - Corrected units.
//   06/05/2002 - CML - Added some initial values.  Removed the blocked h_gate
//                      component from the fast sodium current as it belongs to a
//                      separate model which considers the effect of drugs.
//   22/07/2002 - CML - Added more metadata.
//   08/02/2003 - DPN - Added encapsulation hierarchy for transient_outward_current.
// This version of the Noble 1998 model is extensively modified from the
// version available in the CellML model repository on cellml.org. The default
// variable values are all included in this model description, although this
// should change when we go to CellML 1.1.
// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit The Bioengineering Research Group
// created: W3CDTF 2001-12-18
// modification: Encapsulated the model under an interface component for use when importing the model into a specific experiment or simulation.; Family Nickerson; Given David; Other P; W3CDTF 2004-12-23
// modification: Added more metadata.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-07-22
// modification: Corrected units.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-03-01
// modification: Corrected several equations.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-02-26
// modification: Corrected the i_K1 and i_K_ACh calculations.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-01-04
// modification: Updated metadata to conform to the 16/1/02 CellML Metadata 1.0 Specification.; Family Cuellar; Given Autumn; Other A.; W3CDTF 2002-01-21
// modification: Altered some of the connections.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-01-04
// modification: Added some initial values from Penny Noble's documentation. Removed the blocked h_gate component from the fast sodium current as it belongs to a separate model which considers the effect of drugs.; Family Lloyd; Given Catherine; Other May; W3CDTF 2002-05-06
// modification: Fixed up the CellML/MathML to enable the model to be solved in CMISS. The model is no longer a direct translation of the Noble 1998 article, but I believe it accurately represents the intent of the model.; Family Nickerson; Given David; Other P; W3CDTF 2003-04-05
// publisher: Bioengineering Institute, The University of Auckland.
// title: The Noble 1998 Improved Guinea-Pig Ventricular Cell Model
// comment: This is the CellML description of Noble's 1998 improved guinea-pig ventricular cell model. It incorporates a diadic space, rapid and slow potassium currents and length- and tension-dependent processes.; FN Catherine Lloyd
// species: Guinea-Pig
// bio_entity: Ventricular Myocyte
// reference: Pubmed_id 9487284
// simulation: #simulation; multistepMethod bdf; iterationMethod newton; linearSolver dense; generic.xml#time; maximumStepSize 0.01; tabulationStepSize 1.0; startingValue 0; endingValue 700
def model noble_model_1998 as
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The Publisher metadata.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "noble_model_1998", which is declared on the
  // <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  //
  // The CellML Metadata Specification recommends that bibliographic metadata
  // is used to provide information about the original model reference.  The
  // "identifier" attribute on the "BibliographicReference" class provides an
  // elegant way to identify a cited reference using a database identifier
  // such as Pubmed.  All associated data such as author, journal title,
  // date, etc can be looked up on the database.
  // Standard CMISS units
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit ng as
    unit gram {pref: nano};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit K as
    unit kelvin;
  enddef;
  def unit nmol as
    unit mole {pref: nano};
  enddef;
  def unit mm2 as
    unit mm {expo: 2};
  enddef;
  def unit mm3 as
    unit mm {expo: 3};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mS as
    unit siemens {pref: milli};
  enddef;
  def unit mS_per_mmsq as
    unit mS;
    unit mm {expo: -2};
  enddef;
  def unit mS_per_mm as
    unit mS;
    unit mm {expo: -1};
  enddef;
  def unit uA_per_mmsq as
    unit uA;
    unit mm {expo: -2};
  enddef;
  def unit uA_per_mmcu as
    unit uA;
    unit mm {expo: -3};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit uF_per_mmsq as
    unit uF;
    unit mm {expo: -2};
  enddef;
  def unit mM as
    unit nmol;
    unit mm {expo: -3};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit nN as
    unit newton {pref: nano};
  enddef;
  def unit mPa as
    unit pascal {pref: milli};
  enddef;
  def unit pJ as
    unit joule {pref: pico};
  enddef;
  def unit nW as
    unit watt {pref: nano};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit per_mm as
    unit mm {expo: -1};
  enddef;
  def unit per_mV_per_ms as
    unit mV {expo: -1};
    unit per_ms;
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit per_ms;
  enddef;
  def unit uA_per_mmsq_per_mM as
    unit uA;
    unit mm {expo: -2};
    unit mM {expo: -1};
  enddef;
  def unit gas_constant as
    unit pJ;
    unit nmol {expo: -1};
    unit K {expo: -1};
  enddef;
  def unit faradays_constant as
    unit nC;
    unit nmol {expo: -1};
  enddef;

  // comment: This component is used to declare variables that are used by all or most of the other components, in this case just `time'.
  def comp environment as
    var time: ms {pub: out};
  enddef;

  // comment: This component is the `root' node of our model. It defines the action potential variable `V'.
  def comp membrane as
    var V: mV {pub: out, init: -92.499};
    var R: gas_constant {pub: out, init: 8314.472};
    var T: K {pub: out, init: 310.0};
    var F: faradays_constant {pub: out, init: 96485.0};
    var Am: per_mm {pub: out, init: 193.69};
    var Cm: uF_per_mmsq {init: 0.014651};
    var time: ms {pub: in};
    var i_K1: uA_per_mmsq {pub: in};
    var i_to: uA_per_mmsq {pub: in};
    var i_K: uA_per_mmsq {pub: in};
    var i_K_ATP: uA_per_mmsq {pub: in};
    var i_Ca_L_K: uA_per_mmsq {pub: in};
    var i_b_K: uA_per_mmsq {pub: in};
    var i_NaK: uA_per_mmsq {pub: in};
    var i_Na: uA_per_mmsq {pub: in};
    var i_b_Na: uA_per_mmsq {pub: in};
    var i_p_Na: uA_per_mmsq {pub: in};
    var i_Ca_L_Na: uA_per_mmsq {pub: in};
    var i_NaCa: uA_per_mmsq {pub: in};
    var i_NaCa_ds: uA_per_mmsq {pub: in};
    var i_Ca_L_Ca: uA_per_mmsq {pub: in};
    var i_Ca_L_Ca_ds: uA_per_mmsq {pub: in};
    var i_Ca_L_K_ds: uA_per_mmsq {pub: in};
    var i_Ca_L_Na_ds: uA_per_mmsq {pub: in};
    var i_b_Ca: uA_per_mmsq {pub: in};
    var i_Na_stretch: uA_per_mmsq {pub: in};
    var i_K_stretch: uA_per_mmsq {pub: in};
    var i_Ca_stretch: uA_per_mmsq {pub: in};
    var i_Ns_stretch: uA_per_mmsq {pub: in};
    var i_An_stretch: uA_per_mmsq {pub: in};
    var i_K_ACh: uA_per_mmsq {pub: in};
    var IStim: uA_per_mmsq;
    var stimTime: ms {init: 100.0};
    var stimDuration: ms {init: 1.0};
    var stimCurrent: uA_per_mmcu {init: 250};
    // comment: Control the stimulus current.
    IStim = sel
      case (time >= stimTime) and (time <= stimTime+stimDuration):
        stimCurrent/Am;
      otherwise:
        0.0{uA_per_mmsq};
    endsel;
    // comment: The ODE governing the membrane potential -- given by the summation of the ionic currents and an applied stimulus.
    // plus
    // minus
    // divide
    ode(V, time) = (IStim-(i_K1+i_to+i_K+i_K_ATP+i_b_K+i_NaK+i_Na+i_b_Na+i_p_Na+i_NaCa+i_NaCa_ds+i_Ca_L_Ca+i_Ca_L_Ca_ds+i_Ca_L_K+i_Ca_L_K_ds+i_Ca_L_Na+i_Ca_L_Na_ds+i_b_Ca+i_Na_stretch+i_K_stretch+i_Ca_stretch+i_Ns_stretch+i_An_stretch+i_K_ACh))/Cm;
    // eq
  enddef;

  // comment: A component that conveniently keeps the reversal potential calculations together.
  def comp reversal_potentials as
    var E_Na: mV {pub: out};
    var E_K: mV {pub: out};
    var E_Ks: mV {pub: out};
    var E_Ca: mV {pub: out};
    var E_mh: mV {pub: out};
    var P_kna: dimensionless {init: 0.03};
    var P_nak: dimensionless {init: 0.12};
    var K_o: mM {pub: in};
    var Na_o: mM {pub: in};
    var K_i: mM {pub: in};
    var Na_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    var R: gas_constant {pub: in};
    var F: faradays_constant {pub: in};
    var T: K {pub: in};
    var time: ms {pub: in};
    // comment: Calculation of the sodium reversal potential from the current intra- and extracellular concentration of sodium ions.
    E_Na = R*T/F*ln(Na_o/Na_i);
    // comment: Calculation of the potassium reversal potential from the current intra- and extracellular concentration of potassium ions.
    E_K = R*T/F*ln(K_o/K_i);
    // comment: Calculation of the potassium reversal potential for the slow component of the delayed rectifier.
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    // comment: Calculation of the calcium reversal potential.
    E_Ca = 0.5{dimensionless}*(R*T/F)*ln(Ca_o/Ca_i);
    // comment: Calculation of the reversal potential for the fast sodium channel.
    E_mh = R*T/F*ln((Na_o+P_nak*K_o)/(Na_i+P_nak*K_i));
  enddef;

  // comment: Description of the time independent inward potassium current.
  def comp time_independent_potassium_current as
    var i_K1: uA_per_mmsq {pub: out};
    var K_mk1: mM {pub: out, init: 10.0};
    var g_K1: mS_per_mmsq {init: 77.11e-3};
    var K_o: mM {pub: in};
    var V: mV {pub: in};
    var E_K: mV {pub: in};
    var R: gas_constant {pub: in};
    var F: faradays_constant {pub: in};
    var T: K {pub: in};
    var time: ms {pub: in};
    // comment: Calculation of the time independent potassium current.
    i_K1 = g_K1*(K_o/(K_o+K_mk1))*((V-E_K)/(1.0{dimensionless}+exp(1.25{dimensionless}*(V-(E_K+10.0{mV}))/(R*T/F))));
  enddef;

  // comment: A component to group the potassium currents.
  def comp total_potassium_current as
    var i_K: uA_per_mmsq {pub: out};
    var i_Kr: uA_per_mmsq {pub: in};
    var i_Ks: uA_per_mmsq {pub: in};
    var i_KNa: uA_per_mmsq {pub: in};
    var time: ms {pub: in};
    // comment: Simple summation of the individual potassium currents into a single current.
    i_K = i_Kr+i_Ks+i_KNa;
  enddef;

  // comment: The rapid component of the delayed rectifier current.
  def comp rapid_time_dependent_potassium_current as
    var i_Kr: uA_per_mmsq {pub: out};
    var g_Kr1: mS_per_mmsq {init: 0.32386e-3};
    var g_Kr2: mS_per_mmsq {init: 0.20049e-3};
    var E_K: mV {pub: in};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Xr1: dimensionless {priv: in};
    var Xr2: dimensionless {priv: in};
    // comment: Calculation of the rapid component of the delayed rectifier current.
    i_Kr = (g_Kr1*Xr1+g_Kr2*Xr2)*(1.0{dimensionless}/(1.0{dimensionless}+exp((V+9.0{mV})/22.4{mV})))*(V-E_K);
  enddef;

  // comment: The fast activation gate for the rapid component of the delayed rectifier.
  def comp rapid_time_dependent_potassium_current_Xr1_gate as
    var Xr1: dimensionless {pub: out, init: 0.01428};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The gating kinetics for the fast gate of the rapid component of the delayed rectifier.
    ode(Xr1, time) = 0.05{per_ms}/(1.0{dimensionless}+exp(-(V-5.0{mV})/9.0{mV}))*(1.0{dimensionless}-Xr1)-0.00005{per_ms}*exp(-((V-20.0{mV})/15.0{mV}))*Xr1;
  enddef;

  // comment: The slow gate of the rapid component of the delayed rectifier.
  def comp rapid_time_dependent_potassium_current_Xr2_gate as
    var Xr2: dimensionless {pub: out, init: 0.5};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: Gating kinetics for the slow gate of the rapid component of the delayed rectifier.
    ode(Xr2, time) = 0.05{per_ms}/(1.0{dimensionless}+exp(-(V-5.0{mV})/9.0{mV}))*(1.0{dimensionless}-Xr2)-0.0004{per_ms}*exp(-pow((V+30.0{mV})/30.0{mV}, 3.0{dimensionless}))*Xr2;
  enddef;

  // comment: The slow component of the delayed rectifier current.
  def comp slow_time_dependent_potassium_current as
    var i_Ks: uA_per_mmsq {pub: out};
    var g_Ks: mS_per_mmsq {init: 0.40097e-3};
    var E_Ks: mV {pub: in};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Xs: dimensionless {priv: in};
    // comment: Calculation of the slow component current of the delayed rectifier.
    i_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  // comment: The gate for the slow component of the delayed rectifier current.
  def comp slow_time_dependent_potassium_current_Xs_gate as
    var Xs: dimensionless {pub: out, init: 0.5};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The gating kinetics for the slow component of the delayed rectifier current.
    ode(Xs, time) = 0.014{per_ms}/(1.0{dimensionless}+exp(-(V-40.0{mV})/9.0{mV}))*(1.0{dimensionless}-Xs)-Xs*0.001{per_ms}*exp(-V/45.0{mV});
  enddef;

  // comment: Background potassium current.
  def comp potassium_background_current as
    var i_b_K: uA_per_mmsq {pub: out};
    var g_bk: mS_per_mmsq {init: 0.0};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: Calculation of the background potassium current.
    i_b_K = g_bk*(V-E_K);
  enddef;

  // comment: An ATP dependent potassium current. Included here for completeness, but this current is only used when modelling ischaemia - and this version of the model has not been tested for this.
  def comp ATP_dependent_potassium_current as
    var i_K_ATP: uA_per_mmsq {pub: out};
    var g_K_ATP: mS_per_mmsq {init: 0.0};
    var K_ATP: mM {init: 0.1};
    var ATP: mM {init: 5.0};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: Calculation of the ATP dependent potassium current.
    i_K_ATP = g_K_ATP*(V+80.0{mV})/(1.0{dimensionless}+sqr(ATP/K_ATP));
  enddef;

  // comment: A sodium activated potassium current. Again, included for completeness but generally not used and untested.
  def comp sodium_activated_potassium_current as
    var i_KNa: uA_per_mmsq {pub: out};
    var g_K_Na: mS_per_mmsq {init: 0.0};
    var K_kna: mM {init: 20.0};
    var Na_i: mM {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: Calculation of the sodium activated potassium current.
    i_KNa = g_K_Na*(Na_i/(Na_i+K_kna))*(V-E_K);
  enddef;

  // comment: The fast sodium current - the driving force of the upstroke of the cardiac action potential.
  def comp fast_sodium_current as
    var i_Na: uA_per_mmsq {pub: out};
    var g_Na: mS_per_mmsq {init: 385.5e-3};
    var E_mh: mV {pub: in};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    // comment: Calculation of the fast sodium current.
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*(V-E_mh);
  enddef;

  // comment: The activation gate for the fast sodium current.
  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.0017};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var alpha: per_ms;
    var beta: per_ms;
    // comment: The gating kinetics for the activation gate of the fast sodium current.
    ode(m, time) = alpha*(1.0{dimensionless}-m)-beta*m;
    // m_diff_eq
    // comment: Calculation of the opening rate of the activation gate for the fast sodium current.
    // lt
    alpha = sel
      case abs(V+41.0{mV}) < 0.1e-4{mV}:
        2.0{per_ms};
      otherwise:
        0.2{per_mV_per_ms}*(V+41.0{mV})/(1.0{dimensionless}-exp(-0.1{dimensionless}*(V+41.0{mV})));
    endsel;
    // alpha_calculation
    // comment: Calculation of the closing rate of the activation gate for the fast sodium current.
    beta = 8.0{per_ms}*exp(-0.055556{dimensionless}*(V+66.0{mV}));
    // beta_calculation
  enddef;

  // comment: The inactivation gate for the fast sodium current.
  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.9939474};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The gating kinetics for the inactivation gate of the fast sodium current.
    ode(h, time) = 0.02{per_ms}*exp(-0.125{dimensionless}*(V+75.0{mV}))*(1.0{dimensionless}-h)-h*(2.0{per_mV_per_ms}/(1.0{dimensionless}+320.0{dimensionless}*exp(-0.1{dimensionless}*(V+75.0{mV}))));
  enddef;

  // comment: The persistent sodium current.
  def comp persistent_sodium_current as
    var i_p_Na: uA_per_mmsq {pub: out};
    var g_pna: mS_per_mmsq {init: 0.61688e-3};
    var E_Na: mV {pub: in};
    var time: ms {pub: in};
    var V: mV {pub: in};
    // comment: Calculation of the persistent sodium current.
    i_p_Na = g_pna*(1.0{dimensionless}/(1.0{dimensionless}+exp(-((V+52.0{mV})/8.0{mV}))))*(V-E_Na);
  enddef;

  // comment: The background sodium current.
  def comp sodium_background_current as
    var i_b_Na: uA_per_mmsq {pub: out};
    var g_bna: mS_per_mmsq {init: 0.092532e-3};
    var Na_i: mM {pub: in};
    var E_Na: mV {pub: in};
    var time: ms {pub: in};
    var V: mV {pub: in};
    // comment: Calculation of the sodium background current.
    i_b_Na = g_bna*(V-E_Na);
  enddef;
  //
  // The "L_type_Ca_channel" component describes an inward ionic current which is
  // the sum of Ca, Na and K ions through the membrane channel.  The channel has
  // one activation gate (d) and two inactivation gates (f and
  // f2 (or f2ds in the diadic space)).

  // comment: This component describes an inward ionic current which is the sum of calcium, sodium and potassium ions through the membrane channel. The channel has one activation gate (d) and two inactivation gates (f and f2 (or f2ds in the diadic space)). A fraction of these channels (ICaLfract) open into the diadic subspace, with the remainder being evenly distributed throughout the membrane area.
  def comp L_type_Ca_channel as
    var i_Ca_L_Ca: uA_per_mmsq {pub: out};
    var i_Ca_L_K: uA_per_mmsq {pub: out};
    var i_Ca_L_Na: uA_per_mmsq {pub: out};
    var i_Ca_L_Ca_ds: uA_per_mmsq {pub: out};
    var i_Ca_L_K_ds: uA_per_mmsq {pub: out};
    var i_Ca_L_Na_ds: uA_per_mmsq {pub: out};
    var P_ca: uA_per_mmsq_per_mM {init: 15.422e-3};
    var P_caK: dimensionless {init: 0.002};
    var P_caNa: dimensionless {init: 0.01};
    var ICaLfract: dimensionless {init: 1.0};
    var Ca_o: mM {pub: in};
    var Ca_i: mM {pub: in, priv: out};
    var Ca_ds: mM {pub: in, priv: out};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var R: gas_constant {pub: in};
    var F: faradays_constant {pub: in};
    var T: K {pub: in};
    var K_cachoff: mM {priv: out, init: 0.001};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var ACh: mM {pub: in};
    var K_AChICaL: mM {init: 0.2e-6};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var f2ds: dimensionless {priv: in};
    // comment: The calcium ion component of the total current through the channel into the bulk myoplasm.
    i_Ca_L_Ca = (1.0{dimensionless}-ICaLfract)*4.0{dimensionless}*P_ca*d*f*f2*((V-50.0{mV})/(R*T/F)/(1.0{dimensionless}-exp(-(V-50.0{mV})/(R*T/(2.0{dimensionless}*F)))))*(Ca_i*exp(50.0{dimensionless}/(R*T/(2.0{dimensionless}*F)))-Ca_o*exp(-(V-50.0{mV})/(R*T/(2.0{dimensionless}*F))))*(1.0{dimensionless}-ACh/(ACh+K_AChICaL));
    // comment: The potassium ion component of the total current through the channel into the bulk myoplasm.
    i_Ca_L_K = (1.0{dimensionless}-ICaLfract)*P_caK*P_ca*d*f*f2*(K_i*exp(50.0{dimensionless}/(R*T/F))-K_o*exp(-(V-50.0{mV})/(R*T/F)))*(1.0{dimensionless}-ACh/(ACh+K_AChICaL));
    // comment: The sodium ion component of the total current through the channel into the bulk myoplasm.
    i_Ca_L_Na = (1.0{dimensionless}-ICaLfract)*P_caNa*P_ca*d*f*f2*(Na_i*exp(50.0{dimensionless}/(R*T/F))-Na_o*exp(-(V-50.0{mV})/(R*T/F)))*(1.0{dimensionless}-ACh/(ACh+K_AChICaL));
    // comment: The calcium ion component of the total current through the channel into the diadic subspace.
    i_Ca_L_Ca_ds = ICaLfract*4.0{dimensionless}*P_ca*d*f*f2ds*((V-50.0{mV})/(R*T/F)/(1.0{dimensionless}-exp(-(V-50.0{mV})/(R*T/(2.0{dimensionless}*F)))))*(Ca_ds*exp(50.0{dimensionless}/(R*T/(2.0{dimensionless}*F)))-Ca_o*exp(-(V-50.0{mV})/(R*T/(2.0{dimensionless}*F))))*(1.0{dimensionless}-ACh/(ACh+K_AChICaL));
    // comment: The potassium ion component of the total current through the channel into the diadic subspace.
    i_Ca_L_K_ds = ICaLfract*P_caK*P_ca*d*f*f2ds*(K_i*exp(50.0{dimensionless}/(R*T/F))-K_o*exp(-(V-50.0{mV})/(R*T/F)))*(1.0{dimensionless}-ACh/(ACh+K_AChICaL));
    // comment: The sodium ion component of the total current through the channel into the diadic subspace.
    i_Ca_L_Na_ds = ICaLfract*P_caNa*P_ca*d*f*f2ds*(Na_i*exp(50.0{dimensionless}/(R*T/F))-Na_o*exp(-(V-50.0{mV})/(R*T/F)))*(1.0{dimensionless}-ACh/(ACh+K_AChICaL));
  enddef;

  // comment: The activation gate of the L-type calcium channel.
  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {pub: out, init: 0.0};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var alpha: per_ms;
    var beta: per_ms;
    // comment: The gating kinetics for the activation gate.
    ode(d, time) = alpha*(1.0{dimensionless}-d)-beta*d;
    // d_diff_eq
    // comment: The opening rate for the activation gate.
    alpha = sel
      case abs(V+19.0{mV}) < 1.0e-3{mV}:
        0.36{per_ms};
      otherwise:
        0.09{per_ms}*(V+19.0{mV})/(1.0{dimensionless}-exp(-(V+19.0{mV})/4.0{mV}));
    endsel;
    // alpha_calculation
    // comment: The closing rate for the activation gate.
    beta = sel
      case abs(V+19.0{mV}) < 1.0e-3{mV}:
        0.36{per_ms};
      otherwise:
        -0.036{per_ms}*(V+19.0{mV})/(1.0{dimensionless}-exp((V+19.0{mV})/10.0{mV}));
    endsel;
    // beta_calculation
  enddef;

  // comment: The first inactivation gate for the L-type calcium channel.
  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {pub: out, init: 1.0};
    var K_cachoff: mM {pub: in};
    var Ca_i: mM {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var alpha: per_ms;
    var beta: per_ms;
    // comment: The gating kinetics for the first inactivation gate.
    ode(f, time) = alpha*(1.0{dimensionless}-f)-beta*f;
    // f_diff_eq
    // comment: The opening rate for the inactivation gate.
    // plus
    // plus
    // divide
    // exp
    // minus
    // divide
    // times
    alpha = sel
      case abs(V+34.0{mV}) < 1.0e-3{mV}:
        0.0075{per_ms};
      otherwise:
        -0.001875{per_ms}*((V+34.0{mV})/(1.0{dimensionless}-exp((V+34.0{mV})/4.0{mV})));
    endsel;
    // alpha_calculation
    // comment: The closing rate for the inactivation gate.
    // plus
    // divide
    // minus
    // exp
    // plus
    // divide
    beta = 0.0036{dimensionless}/(1.0{dimensionless}+exp(-((V+34.0{mV})/4.0{mV})));
    // eq
  enddef;

  // comment: The second inactivation gate for L-type calcium channels in the membrane outside the diadic subspace.
  def comp L_type_Ca_channel_f2_gate as
    var f2: dimensionless {pub: out, init: 1.0};
    var CaInact: per_ms {init: 0.02};
    var K_cachoff: mM {pub: in};
    var Ca_i: mM {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The gating kinetics for the inactivation gate.
    ode(f2, time) = CaInact*(1.0{dimensionless}-(Ca_i/(K_cachoff+Ca_i)+f2));
  enddef;

  // comment: The second inactivation gate for L-type calcium channels in the membrane when open into the diadic subspace.
  def comp L_type_Ca_channel_f2ds_gate as
    var f2ds: dimensionless {pub: out, init: 1.0};
    var K_dsoff: mM {init: 0.001};
    var Ca_ds: mM {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var CaInactDS: per_ms {init: 0.02};
    // comment: The gating kinetics for the inactivation gate.
    ode(f2ds, time) = CaInactDS*(1.0{dimensionless}-(Ca_ds/(K_dsoff+Ca_ds)+f2ds));
  enddef;

  // comment: The background calcium current.
  def comp calcium_background_current as
    var i_b_Ca: uA_per_mmsq {pub: out};
    var g_bca: mS_per_mmsq {init: 0.038555e-3};
    var E_Ca: mV {pub: in};
    var time: ms {pub: in};
    var V: mV {pub: in};
    // comment: Calculation of the background calcium current.
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  // comment: The doubly gated transient outward current.
  def comp transient_outward_current as
    var i_to: uA_per_mmsq {pub: out};
    var g_to: mS_per_mmsq {init: 0.77100e-3};
    var g_tos: dimensionless {init: 0.0};
    var E_K: mV {pub: in};
    var Ca_i: mM {pub: in};
    var V: mV {pub: in, priv: out};
    var time: ms {pub: in, priv: out};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    // comment: Evaluation of the transient outward current.
    i_to = g_to*(g_tos+s*(1.0{dimensionless}-g_tos))*r*(V-E_K);
  enddef;

  // comment: The first gate of the transient outward current.
  def comp transient_outward_current_s_gate as
    var s: dimensionless {pub: out, init: 0.9950485};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The gating kinetics.
    ode(s, time) = 0.000033{per_ms}*exp(-V/17.0{mV})*(1.0{dimensionless}-s)-0.033{per_ms}/(1.0{dimensionless}+exp(-(V+10.0{mV})/8.0{mV}))*s;
  enddef;

  // comment: The second of the two gates for the transient outward current.
  def comp transient_outward_current_r_gate as
    var r: dimensionless {pub: out, init: 0.0};
    var r_ss: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: The gating kinetics for the r gate.
    ode(r, time) = 0.333{per_ms}*(r_ss-r);
    // comment: Calculation of the steady-state component of the gating kinetics for the r gate.
    r_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-0.2{dimensionless}*(V+4.0{mV})));
  enddef;

  // comment: Acetylcholine (ACh) dependent potassium current. Once more, this current has been included for completeness with respect to the original publication but is usually left out of simulations. It is useful for simulating specific cellular conditions, but this formulation has not been tested.
  def comp ACh_dependent_potassium_current as
    var i_K_ACh: uA_per_mmsq {pub: out};
    var g_KACh: mS_per_mmsq {init: 0.0};
    var ACh: mM {pub: out, init: 0.0};
    var K_ACh: mM {init: 0.2795e-6};
    var K_KACh: mM {init: 10.0};
    var E_K: mV {pub: in};
    var K_o: mM {pub: in};
    var K_mk1: mM {pub: in};
    var R: gas_constant {pub: in};
    var F: faradays_constant {pub: in};
    var T: K {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var time: ms {pub: in, priv: out};
    var x_ACh1: dimensionless {priv: in};
    var x_ACh2: dimensionless {priv: in};
    // comment: Evaluation of the ACh dependent potassium current.
    i_K_ACh = g_KACh*(K_o/(K_o+K_KACh))*x_ACh1*x_ACh2*(pow(ACh, 1.4969{dimensionless})/(pow(ACh, 1.4969{dimensionless})+pow(K_ACh, 1.4969{dimensionless})))*((V-E_K)/(1.0{dimensionless}+exp(0.4{dimensionless}*(V-(E_K+140.0{mV}))/(R*T/F))));
  enddef;

  // comment: The first of two gates for the ACh dependent potassium current.
  def comp ACh_dependent_potassium_current_xACh1_gate as
    var x_ACh1: dimensionless {init: 0.5, pub: out};
    var alpha_ACh: per_ms {init: 0.003684211};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: Gating kinetics for the first gate.
    ode(x_ACh1, time) = alpha_ACh*(1.0{dimensionless}-x_ACh1)-0.00582{per_ms}/(1.0{dimensionless}+exp(-((V+50.0{mV})/15.0{mV})))*x_ACh1;
  enddef;

  // comment: The second of the two gates for the ACh dependent potassium current.
  def comp ACh_dependent_potassium_current_xACh2_gate as
    var x_ACh2: dimensionless {init: 0.5, pub: out};
    var alpha_ACh: per_ms {init: 0.07309924};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: Gating kinetics for the second gate.
    ode(x_ACh2, time) = alpha_ACh*(1.0{dimensionless}-x_ACh2)-0.12{per_ms}/(1.0{dimensionless}+exp(-((V+50.0{mV})/15.0{mV})))*x_ACh2;
  enddef;

  // comment: The sodium potassium pump.
  def comp sodium_potassium_pump as
    var i_NaK: uA_per_mmsq {pub: out};
    var i_NaK_max: uA_per_mmsq {init: 107.95e-3};
    var K_mk: mM {init: 1.0};
    var K_mNa: mM {init: 40.0};
    var K_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var time: ms {pub: in};
    // comment: Calculation of the sodium potassium pump current.
    i_NaK = i_NaK_max*(K_o/(K_o+K_mk))*(Na_i/(Na_i+K_mNa));
  enddef;

  // comment: The sodium calcium exchanger. A fraction of the Na-Ca exchangers (INaCaFract) are assumed to emmpty into the diadic subspace, while the remainder of the channels open into the bulk cytosol.
  def comp sodium_calcium_pump as
    def unit uA_per_mmsq_per_mM4 as
      unit uA;
      unit mm {expo: -2};
      unit mM {expo: -4};
    enddef;
    def unit per_mM4 as
      unit mM {expo: -4};
    enddef;
    var i_NaCa: uA_per_mmsq {pub: out};
    var i_NaCa_ds: uA_per_mmsq {pub: out};
    var K_NaCa: uA_per_mmsq_per_mM4 {init: 0.07711e-3};
    var d_NaCa: per_mM4 {init: 0.0};
    var gamma: dimensionless {init: 0.5};
    var INaCaFract: dimensionless {init: 0.001};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_ds: mM {pub: in};
    var R: gas_constant {pub: in};
    var F: faradays_constant {pub: in};
    var T: K {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    // comment: Calculation of the sodium calcium exchanger current for the channels exposed to the bulk myoplasm.
    i_NaCa = (1.0{dimensionless}-INaCaFract)*K_NaCa*((exp(gamma*(V/(R*T/F)))*pow(Na_i, 3.0{dimensionless})*Ca_o-exp((gamma-1.0{dimensionless})*(V/(R*T/F)))*pow(Na_o, 3.0{dimensionless})*Ca_i)/(1.0{dimensionless}+d_NaCa*(Ca_i*pow(Na_o, 3.0{dimensionless})+Ca_o*pow(Na_i, 3.0{dimensionless}))))*(1.0{dimensionless}/(1.0{dimensionless}+Ca_i/0.0069{mM}));
    // comment: Calculation of the sodium calcium exchanger current for the channels opening into the diadic subspace.
    i_NaCa_ds = INaCaFract*K_NaCa*((exp(gamma*(V/(R*T/F)))*pow(Na_i, 3.0{dimensionless})*Ca_o-exp((gamma-1.0{dimensionless})*(V/(R*T/F)))*pow(Na_o, 3.0{dimensionless})*Ca_ds)/(1.0{dimensionless}+d_NaCa*(Ca_ds*pow(Na_o, 3.0{dimensionless})+Ca_o*pow(Na_i, 3.0{dimensionless}))))*(1.0{dimensionless}/(1.0{dimensionless}+Ca_ds/0.0069{mM}));
  enddef;

  // comment: The sarcoplasmic reticulum calcium pump which transports calcium from the bulk myoplasm into the network SR.
  def comp calcium_uptake_from_myoplasm_to_NSR as
    var i_up: mM_per_ms {pub: out};
    var K_cyca: mM {init: 0.0003};
    var K_xcs: dimensionless {init: 0.4};
    var K_srca: mM {init: 0.5};
    var Ca_i: mM {pub: in};
    var Ca_up: mM {pub: in};
    var time: ms {pub: in};
    // comment: Calculation of the calcium uptake flux.
    i_up = (0.0004{mM_per_ms}*Ca_i-0.00003{mM_per_ms}*Ca_up*(K_cyca*K_xcs/K_srca))/(Ca_i+Ca_up*(K_cyca*K_xcs/K_srca)+K_cyca*K_xcs+K_cyca);
  enddef;

  // comment: Diffusion down the concentration gradient to transfer calcium from the uptake stores in the network SR to the release stores in the junctional SR.
  def comp calcium_transfer_from_NSR_to_JSR as
    var i_tr: mM_per_ms {pub: out};
    var Ca_rel: mM {pub: in};
    var Ca_up: mM {pub: in};
    var time: ms {pub: in};
    // comment: Calculation of the transfer flux between the uptake and release calcium stores.
    i_tr = 0.05{per_ms}*(Ca_up-Ca_rel);
  enddef;

  // comment: This component describes the addition of length dependence to the Noble models. However, in this implementation of the model, it is unused - sarcomere length (SL) is a constant 0, resulting in the removal of length dependence from the model.
  def comp length_dependence as
    var f_stretch: dimensionless {pub: out};
    var SL: mm {pub: out, init: 0.0};
    var SLRef: mm {pub: out, init: 2.0e-3};
    var gamma_SR_SL: per_mm {pub: out, init: 1.5e+3};
    var gamma_SAC_SL: per_mm {init: 2.5e+3};
    // comment: Calculation of the scaling factor for the stretch activated currents based on the change in length from the reference state.
    f_stretch = 1.0{dimensionless}/(1.0{dimensionless}+exp(-2.0{dimensionless}*gamma_SAC_SL*(SL-SLRef)));
  enddef;

  // comment: The length dependent leakage of calcium from the junctional SR into the cytolsol.
  def comp calcium_leak_from_SR as
    var i_leak: mM_per_ms {pub: out};
    var SL: mm {pub: in};
    var gamma_SR_SL: per_mm {pub: in};
    var Ca_rel: mM {pub: in};
    var alpha_SRleak: per_ms {init: 0.00005};
    i_leak = exp(gamma_SR_SL*SL)*alpha_SRleak*Ca_rel;
  enddef;

  // comment: Description of the diffusion of calcium out of the diadic subspace into the bulk cytosol.
  def comp ds_decay_flux as
    var i_decay: mM_per_ms {pub: out};
    var Ca_ds: mM {pub: in};
    var alpha_ca_ds_decay: per_ms {init: 0.01};
    // comment: Calculation of the flux of calcium out of the diadic subspace.
    i_decay = alpha_ca_ds_decay*Ca_ds;
  enddef;

  // comment: The calcium induced calcium release from the junctional SR into the bulk myoplasm. Assumed that activation of calcium release sites by the diadic subspace calcium triggers calcium release in the whole cytosol.
  def comp calcium_release_from_SR as
    var Ca_rel: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_ds: mM {pub: in};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var i_rel: mM_per_ms {pub: out};
    var ActivatorFract: dimensionless {init: 0.00191};
    var ProductFract: dimensionless {init: 0.28546};
    var OpenReleaseChannelFract: dimensionless;
    var RegulatoryBindingSite: dimensionless;
    var PrecursorFract: dimensionless;
    var alpha_act: per_ms;
    var alpha_inact: per_ms;
    var SR_speed_factor: dimensionless;
    var K_mca: mM {init: 0.0005};
    var K_mca_ds: mM {init: 0.01};
    var alpha_rel: per_ms {init: 0.25};
    // comment: The fraction of release sites in the open state.
    OpenReleaseChannelFract = sqr(ActivatorFract/(ActivatorFract+0.25{dimensionless}));
    // OpenReleaseChannelFract_calculation
    // comment: Calculation of the calcium release flux from the JSR into the cytosol.
    i_rel = alpha_rel*OpenReleaseChannelFract*Ca_rel;
    // i_rel_calculation
    // comment: Regulatory binding sites.
    // times
    // plus
    // power
    RegulatoryBindingSite = sqr(Ca_i/(Ca_i+K_mca)+(1.0{dimensionless}-Ca_i/(Ca_i+K_mca))*(Ca_ds/(Ca_ds+K_mca_ds)));
    // RegulatoryBindingSite_calculation
    // comment: Fraction of release channels in the precursor state.
    PrecursorFract = 1.0{dimensionless}-(ActivatorFract+ProductFract);
    // PrecursorFract_calculation
    alpha_act = 0.5{per_ms}*RegulatoryBindingSite;
    // alpha_act_calculation
    alpha_inact = 0.06{per_ms}+0.5{dimensionless}*RegulatoryBindingSite;
    // alpha_inact_calculation
    SR_speed_factor = sel
      case V < -50.0{mV}:
        5.0{dimensionless};
      otherwise:
        1.0{dimensionless};
    endsel;
    // SR_speed_factor_calculation
    ode(ActivatorFract, time) = SR_speed_factor*(alpha_act*PrecursorFract-alpha_inact*ActivatorFract);
    // ActivatorFract_diff_eq
    ode(ProductFract, time) = SR_speed_factor*(alpha_inact*ActivatorFract-0.001{dimensionless}*ProductFract);
    // ProductFract_diff_eq
  enddef;

  // comment: A stretch activated calcium current. Unused and untested in this implementation, but included for completeness.
  def comp stretch_dependent_Ca_current as
    var i_Ca_stretch: uA_per_mmsq {pub: out};
    var g_Ca_stretch: mS_per_mmsq {init: 154.22e-3};
    var E_Ca: mV {pub: in};
    var time: ms {pub: in};
    var f_stretch: dimensionless {pub: in};
    var V: mV {pub: in};
    // comment: Calculation of the current.
    i_Ca_stretch = g_Ca_stretch*f_stretch*(V-E_Ca);
  enddef;

  // comment: Stretch activated potassium current - unused and untested, but included for completeness.
  def comp stretch_dependent_K_current as
    var i_K_stretch: uA_per_mmsq {pub: out};
    var g_K_stretch: mS_per_mmsq {init: 154.22e-3};
    var E_K: mV {pub: in};
    var time: ms {pub: in};
    var f_stretch: dimensionless {pub: in};
    var V: mV {pub: in};
    // comment: Calculation of the current.
    i_K_stretch = g_K_stretch*f_stretch*(V-E_K);
  enddef;

  // comment: A stretch activated sodium current - unused and untested, but included for completeness.
  def comp stretch_dependent_Na_current as
    var i_Na_stretch: uA_per_mmsq {pub: out};
    var g_Na_stretch: mS_per_mmsq {init: 154.22e-3};
    var E_Na: mV {pub: in};
    var time: ms {pub: in};
    var f_stretch: dimensionless {pub: in};
    var V: mV {pub: in};
    // comment: Calculation of the current.
    i_Na_stretch = g_Na_stretch*f_stretch*(V-E_Na);
  enddef;

  // comment: A non-specific stretch activated current. Not used and untested, but included for completeness.
  def comp stretch_dependent_Ns_current as
    var i_Ns_stretch: uA_per_mmsq {pub: out};
    var g_Ns_stretch: mS_per_mmsq {init: 154.22e-3};
    var E_Ns_stretch: mV {init: -30.0};
    var time: ms {pub: in};
    var f_stretch: dimensionless {pub: in};
    var V: mV {pub: in};
    // comment: Calculation of the current.
    i_Ns_stretch = g_Ns_stretch*f_stretch*(V-E_Ns_stretch);
  enddef;

  // comment: A anion specific stretch ativated current - unused and untested, but included for completeness.
  def comp stretch_dependent_An_current as
    var i_An_stretch: uA_per_mmsq {pub: out};
    var g_An_stretch: mS_per_mmsq {init: 154.22e-3};
    var E_An_stretch: mV {init: -20.0};
    var time: ms {pub: in};
    var f_stretch: dimensionless {pub: in};
    var V: mV {pub: in};
    // comment: Calculation of the current.
    i_An_stretch = g_An_stretch*f_stretch*(V-E_An_stretch);
  enddef;

  // comment: A convenient grouping of all the ionic concentration differential equations.
  def comp ionic_concentrations as
    var Na_i: mM {pub: out, init: 5.5997};
    var Na_o: mM {pub: out, init: 140.0};
    var K_i: mM {pub: out, init: 139.3050};
    var K_o: mM {pub: out, init: 4.0};
    var Ca_i: mM {pub: out, init: 0.0000082};
    var Ca_o: mM {pub: out, init: 2.0};
    var Ca_ds: mM {pub: out, init: 0.0000171};
    var Ca_up: mM {pub: out, init: 0.2872393};
    var Ca_rel: mM {pub: out, init: 0.2846761};
    var Ca_calmod: mM {init: 0.0003258};
    var dy_Ca_calmod: mM_per_ms;
    var Ca_troponin: mM {init: 0.0002060};
    var dy_Ca_troponin: mM_per_ms;
    var CALM: mM {init: 0.02};
    var TROP: mM {init: 0.05};
    var alpha_trop: per_mM_per_ms {init: 100.0};
    var beta_trop: per_ms {init: 0.2};
    var gamma_trop_SL: per_mm {init: 2.5e+3};
    var V_i: dimensionless {init: 0.49};
    var V_rel: dimensionless {init: 0.1};
    var V_ds: dimensionless {init: 0.1};
    var V_up: dimensionless {init: 0.01};
    var V_ecs: dimensionless {init: 0.3};
    var Am: per_mm {pub: in};
    var SL: mm {pub: in};
    var i_leak: mM_per_ms {pub: in};
    var i_decay: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    var i_tr: mM_per_ms {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_Na: uA_per_mmsq {pub: in};
    var i_p_Na: uA_per_mmsq {pub: in};
    var i_b_Na: uA_per_mmsq {pub: in};
    var i_NaK: uA_per_mmsq {pub: in};
    var i_NaCa: uA_per_mmsq {pub: in};
    var i_NaCa_ds: uA_per_mmsq {pub: in};
    var i_Ca_L_Na: uA_per_mmsq {pub: in};
    var i_Ca_L_Na_ds: uA_per_mmsq {pub: in};
    var i_Na_stretch: uA_per_mmsq {pub: in};
    var i_to: uA_per_mmsq {pub: in};
    var i_K_ACh: uA_per_mmsq {pub: in};
    var i_K_ATP: uA_per_mmsq {pub: in};
    var i_K1: uA_per_mmsq {pub: in};
    var i_Ca_L_K: uA_per_mmsq {pub: in};
    var i_Ca_L_K_ds: uA_per_mmsq {pub: in};
    var i_b_K: uA_per_mmsq {pub: in};
    var i_K: uA_per_mmsq {pub: in};
    var i_K_stretch: uA_per_mmsq {pub: in};
    var i_Ca_L_Ca: uA_per_mmsq {pub: in};
    var i_Ca_L_Ca_ds: uA_per_mmsq {pub: in};
    var i_b_Ca: uA_per_mmsq {pub: in};
    var i_Ca_stretch: uA_per_mmsq {pub: in};
    var F: faradays_constant {pub: in};
    var time: ms {pub: in};
    // comment: The rate of change of intracellular sodium concentration.
    ode(Na_i, time) = -(Am/(V_i*F))*(i_Na+i_p_Na+i_b_Na*(Na_o/140.0{mM})+i_NaK*3.0{dimensionless}+i_NaCa*3.0{dimensionless}+i_NaCa_ds*3.0{dimensionless}+i_Ca_L_Na+i_Ca_L_Na_ds+i_Na_stretch);
    // comment: The rate of change of intracellular potassium concentration.
    ode(K_i, time) = -(Am/(V_i*F))*(i_K1+i_to+i_b_K+i_K+i_K_stretch+i_Ca_L_K+i_Ca_L_K_ds+i_K_ACh+i_K_ATP-i_NaK*2.0{dimensionless});
    // comment: The rate of change of intracellular calcium concentration.
    // times
    // plus
    // plus
    // minus
    ode(Ca_i, time) = -(Am/(2.0{dimensionless}*V_i*F))*(i_Ca_L_Ca+i_b_Ca+i_Ca_stretch-i_NaCa*2.0{dimensionless})+i_rel*(V_rel/V_i)+i_leak*(V_rel/V_i)+i_decay*(V_ds/V_i)-(i_up+dy_Ca_calmod+dy_Ca_troponin);
    // comment: The rate of change of calcium concentration in the diadic subspace.
    // times
    // minus
    ode(Ca_ds, time) = -(Am/(2.0{dimensionless}*V_ds*F))*(i_Ca_L_Ca_ds-i_NaCa_ds*2.0{dimensionless})-i_decay;
    // comment: The rate of change of calcium concentration in the network SR uptake store.
    ode(Ca_up, time) = V_i/V_up*i_up-i_tr;
    // comment: The rate of change of calcium concentration in the junctional SR release store.
    ode(Ca_rel, time) = V_up/V_rel*i_tr-(i_rel+i_leak);
    // comment: The rate of change of calcium bound to calmodulin.
    dy_Ca_calmod = 100.0{per_mM_per_ms}*Ca_i*(CALM-Ca_calmod)-0.05{per_ms}*Ca_calmod;
    ode(Ca_calmod, time) = dy_Ca_calmod;
    // comment: The rate of change of calcium bound to troponin.
    dy_Ca_troponin = alpha_trop*Ca_i*(TROP-Ca_troponin)-beta_trop*Ca_troponin;
    ode(Ca_troponin, time) = dy_Ca_troponin;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f2_gate;
        comp L_type_Ca_channel_f2ds_gate;
      endcomp;
      comp rapid_time_dependent_potassium_current incl
        comp rapid_time_dependent_potassium_current_Xr1_gate;
        comp rapid_time_dependent_potassium_current_Xr2_gate;
      endcomp;
      comp slow_time_dependent_potassium_current incl
        comp slow_time_dependent_potassium_current_Xs_gate;
      endcomp;
      comp total_potassium_current;
      comp potassium_background_current;
      comp time_independent_potassium_current;
      comp sodium_activated_potassium_current;
      comp ATP_dependent_potassium_current;
      comp persistent_sodium_current;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp ACh_dependent_potassium_current incl
        comp ACh_dependent_potassium_current_xACh1_gate;
        comp ACh_dependent_potassium_current_xACh2_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_calcium_pump;
      comp calcium_uptake_from_myoplasm_to_NSR;
      comp calcium_transfer_from_NSR_to_JSR;
      comp calcium_leak_from_SR;
      comp calcium_release_from_SR;
      comp ds_decay_flux;
      comp length_dependence;
      comp stretch_dependent_Ca_current;
      comp stretch_dependent_K_current;
      comp stretch_dependent_Na_current;
      comp stretch_dependent_Ns_current;
      comp stretch_dependent_An_current;
      comp ionic_concentrations;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f2_gate;
      comp L_type_Ca_channel_f2ds_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_Xr1_gate;
      comp rapid_time_dependent_potassium_current_Xr2_gate;
    endcomp;
    comp slow_time_dependent_potassium_current incl
      comp slow_time_dependent_potassium_current_Xs_gate;
    endcomp;
    comp ACh_dependent_potassium_current incl
      comp ACh_dependent_potassium_current_xACh1_gate;
      comp ACh_dependent_potassium_current_xACh2_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
  enddef;
  // "Time" is passed from the "environment" component into the
  // "membrane" and current components.
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_activated_potassium_current and environment for
    vars time and time;
  enddef;
  def map between ATP_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between ACh_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between persistent_sodium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between potassium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between stretch_dependent_Ca_current and environment for
    vars time and time;
  enddef;
  def map between stretch_dependent_K_current and environment for
    vars time and time;
  enddef;
  def map between stretch_dependent_Na_current and environment for
    vars time and time;
  enddef;
  def map between stretch_dependent_Ns_current and environment for
    vars time and time;
  enddef;
  def map between stretch_dependent_An_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between total_potassium_current and environment for
    vars time and time;
  enddef;
  def map between calcium_uptake_from_myoplasm_to_NSR and environment for
    vars time and time;
  enddef;
  def map between calcium_transfer_from_NSR_to_JSR and environment for
    vars time and time;
  enddef;
  def map between calcium_release_from_SR and environment for
    vars time and time;
  enddef;
  // Several variables are passed between the "membrane" and its sub-components.
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
    vars i_Ca_L_Na and i_Ca_L_Na;
    vars i_Ca_L_K and i_Ca_L_K;
    vars i_Ca_L_Ca_ds and i_Ca_L_Ca_ds;
    vars i_Ca_L_Na_ds and i_Ca_L_Na_ds;
    vars i_Ca_L_K_ds and i_Ca_L_K_ds;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and total_potassium_current for
    vars i_K and i_K;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars V and V;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars V and V;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and sodium_activated_potassium_current for
    vars V and V;
  enddef;
  def map between membrane and ATP_dependent_potassium_current for
    vars V and V;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and persistent_sodium_current for
    vars V and V;
    vars i_p_Na and i_p_Na;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and potassium_background_current for
    vars V and V;
    vars i_b_K and i_b_K;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and sodium_calcium_pump for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars i_NaCa_ds and i_NaCa_ds;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ACh_dependent_potassium_current for
    vars V and V;
    vars i_K_ACh and i_K_ACh;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and stretch_dependent_Ca_current for
    vars i_Ca_stretch and i_Ca_stretch;
    vars V and V;
  enddef;
  def map between membrane and stretch_dependent_K_current for
    vars i_K_stretch and i_K_stretch;
    vars V and V;
  enddef;
  def map between membrane and stretch_dependent_Na_current for
    vars i_Na_stretch and i_Na_stretch;
    vars V and V;
  enddef;
  def map between membrane and stretch_dependent_Ns_current for
    vars i_Ns_stretch and i_Ns_stretch;
    vars V and V;
  enddef;
  def map between membrane and stretch_dependent_An_current for
    vars i_An_stretch and i_An_stretch;
    vars V and V;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
    vars Am and Am;
  enddef;
  // Several variables are passed between the sibling components.
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and persistent_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and stretch_dependent_Na_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and stretch_dependent_K_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and potassium_background_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and sodium_activated_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and rapid_time_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and ACh_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_time_dependent_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and stretch_dependent_Ca_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_mh and E_mh;
  enddef;
  def map between reversal_potentials and ionic_concentrations for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars K_i and K_i;
    vars Na_i and Na_i;
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars K_o and K_o;
    vars i_K1 and i_K1;
  enddef;
  def map between time_independent_potassium_current and ACh_dependent_potassium_current for
    vars K_mk1 and K_mk1;
  enddef;
  def map between total_potassium_current and ionic_concentrations for
    vars i_K and i_K;
  enddef;
  def map between total_potassium_current and rapid_time_dependent_potassium_current for
    vars i_Kr and i_Kr;
  enddef;
  def map between total_potassium_current and slow_time_dependent_potassium_current for
    vars i_Ks and i_Ks;
  enddef;
  def map between total_potassium_current and sodium_activated_potassium_current for
    vars i_KNa and i_KNa;
  enddef;
  def map between potassium_background_current and ionic_concentrations for
    vars i_b_K and i_b_K;
  enddef;
  def map between sodium_activated_potassium_current and ionic_concentrations for
    vars Na_i and Na_i;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
  enddef;
  def map between persistent_sodium_current and ionic_concentrations for
    vars i_p_Na and i_p_Na;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_b_Na and i_b_Na;
    vars Na_i and Na_i;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars i_Ca_L_Ca and i_Ca_L_Ca;
    vars i_Ca_L_K and i_Ca_L_K;
    vars i_Ca_L_Na and i_Ca_L_Na;
    vars i_Ca_L_Ca_ds and i_Ca_L_Ca_ds;
    vars i_Ca_L_Na_ds and i_Ca_L_Na_ds;
    vars i_Ca_L_K_ds and i_Ca_L_K_ds;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars K_i and K_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between transient_outward_current and ionic_concentrations for
    vars Ca_i and Ca_i;
    vars i_to and i_to;
  enddef;
  def map between ACh_dependent_potassium_current and ionic_concentrations for
    vars K_o and K_o;
    vars i_K_ACh and i_K_ACh;
  enddef;
  def map between ATP_dependent_potassium_current and ionic_concentrations for
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars i_NaK and i_NaK;
    vars K_o and K_o;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_pump and ionic_concentrations for
    vars i_NaCa and i_NaCa;
    vars i_NaCa_ds and i_NaCa_ds;
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between calcium_uptake_from_myoplasm_to_NSR and ionic_concentrations for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_transfer_from_NSR_to_JSR and ionic_concentrations for
    vars i_tr and i_tr;
    vars Ca_rel and Ca_rel;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_release_from_SR and ionic_concentrations for
    vars i_rel and i_rel;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between calcium_leak_from_SR and ionic_concentrations for
    vars i_leak and i_leak;
    vars Ca_rel and Ca_rel;
  enddef;
  def map between calcium_leak_from_SR and length_dependence for
    vars gamma_SR_SL and gamma_SR_SL;
    vars SL and SL;
  enddef;
  def map between ds_decay_flux and ionic_concentrations for
    vars i_decay and i_decay;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between calcium_release_from_SR and ionic_concentrations for
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between calcium_release_from_SR and membrane for
    vars V and V;
  enddef;
  def map between length_dependence and ionic_concentrations for
    vars SL and SL;
  enddef;
  def map between length_dependence and stretch_dependent_Ca_current for
    vars f_stretch and f_stretch;
  enddef;
  def map between length_dependence and stretch_dependent_Na_current for
    vars f_stretch and f_stretch;
  enddef;
  def map between length_dependence and stretch_dependent_K_current for
    vars f_stretch and f_stretch;
  enddef;
  def map between length_dependence and stretch_dependent_Ns_current for
    vars f_stretch and f_stretch;
  enddef;
  def map between length_dependence and stretch_dependent_An_current for
    vars f_stretch and f_stretch;
  enddef;
  def map between stretch_dependent_Ca_current and ionic_concentrations for
    vars i_Ca_stretch and i_Ca_stretch;
  enddef;
  def map between stretch_dependent_K_current and ionic_concentrations for
    vars i_K_stretch and i_K_stretch;
  enddef;
  def map between stretch_dependent_Na_current and ionic_concentrations for
    vars i_Na_stretch and i_Na_stretch;
  enddef;
  //
  // Various variables are passed between parent components and their
  // encapsulated gates.
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr1_gate for
    vars Xr1 and Xr1;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr2_gate for
    vars Xr2 and Xr2;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars Ca_i and Ca_i;
    vars V and V;
    vars K_cachoff and K_cachoff;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars Ca_i and Ca_i;
    vars V and V;
    vars K_cachoff and K_cachoff;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f2ds_gate for
    vars f2ds and f2ds;
    vars time and time;
    vars Ca_ds and Ca_ds;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and ACh_dependent_potassium_current for
    vars ACh and ACh;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between ACh_dependent_potassium_current and ACh_dependent_potassium_current_xACh1_gate for
    vars x_ACh1 and x_ACh1;
    vars time and time;
    vars V and V;
  enddef;
  def map between ACh_dependent_potassium_current and ACh_dependent_potassium_current_xACh2_gate for
    vars x_ACh2 and x_ACh2;
    vars time and time;
    vars V and V;
  enddef;
enddef;
