// reference: subject_type keyword; electrophysiology
def model heijman_2011 as
  def unit A_mol4_per_m14_times_1e_minus_2 as
    unit metre {expo: -14.0, mult: 0.01};
    unit ampere;
    unit mole {expo: 4.0};
  enddef;
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit cm as
    unit metre {mult: 0.01};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit cm_per_s as
    unit metre {mult: 0.01};
    unit second {expo: -1.0};
  enddef;
  def unit dimensionless_times_1e3 as
    unit dimensionless {mult: 1000};
  enddef;
  def unit dimensionless_times_1e_minus_3 as
    unit dimensionless {mult: 0.001};
  enddef;
  def unit g4_m8_per_s12_per_A4 as
    unit gram {expo: 4.0};
    unit metre {expo: 8.0};
    unit second {expo: -12.0};
    unit ampere {expo: -4.0};
  enddef;
  def unit m2_mol_per_s_per_A_times_1e_minus_4 as
    unit metre {expo: 2.0, mult: 0.0001};
    unit second {expo: -1.0};
    unit ampere {expo: -1.0};
    unit mole;
  enddef;
  def unit m2_per_A_times_1e2 as
    unit metre {expo: 2.0, mult: 100};
    unit ampere {expo: -1.0};
  enddef;
  def unit m3_per_mol_times_1e3 as
    unit metre {expo: 3.0, mult: 1000};
    unit mole {expo: -1.0};
  enddef;
  def unit m3_per_s_times_1e_minus_9 as
    unit metre {expo: 3.0, mult: 1e-09};
    unit second {expo: -1.0};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM2 as
    unit metre {expo: -6.0};
    unit mole {expo: 2.0};
  enddef;
  def unit mM2_times_1e_minus_6 as
    unit metre {expo: -6.0, mult: 1e-06};
    unit mole {expo: 2.0};
  enddef;
  def unit mM3 as
    unit metre {expo: -9.0};
    unit mole {expo: 3.0};
  enddef;
  def unit mM3_times_1e_minus_9 as
    unit metre {expo: -9.0, mult: 1e-09};
    unit mole {expo: 3.0};
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_cm2 as
    unit gram {expo: -1.0, mult: 0.01};
    unit metre {expo: -4.0};
    unit second {expo: 3.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol4_per_m12 as
    unit metre {expo: -12.0};
    unit mole {expo: 4.0};
  enddef;
  def unit mol4_per_m12_times_1e_minus_12 as
    unit metre {expo: -12.0, mult: 1e-12};
    unit mole {expo: 4.0};
  enddef;
  def unit mol5_per_m15_times_1e_minus_15 as
    unit metre {expo: -15.0, mult: 1e-15};
    unit mole {expo: 5.0};
  enddef;
  def unit mol6_per_m18_times_1e_minus_18 as
    unit metre {expo: -18.0, mult: 1e-18};
    unit mole {expo: 6.0};
  enddef;
  def unit mol_per_m3_per_s2_times_1e6 as
    unit metre {expo: -3.0, mult: 1000000};
    unit second {expo: -2.0};
    unit mole;
  enddef;
  def unit mol_per_m3_per_s_times_1e_minus_3 as
    unit metre {expo: -3.0, mult: 0.001};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mol_per_m_per_s_per_A_times_1e5 as
    unit metre {expo: -1.0, mult: 100000};
    unit second {expo: -1.0};
    unit ampere {expo: -1.0};
    unit mole;
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mM_per_ms as
    unit metre {expo: 3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit s4_A2_per_g_per_m2_per_mol as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
    unit mole {expo: -1.0};
  enddef;
  def unit uA_per_cm2 as
    unit metre {expo: -2.0, mult: 0.01};
    unit ampere;
  enddef;
  def unit uF_per_cm2 as
    unit gram {expo: -1.0, mult: 1e-05};
    unit metre {expo: -4.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit uL as
    unit metre {expo: 3.0, mult: 1e-09};
  enddef;
  def unit uM as
    unit metre {expo: -3.0, mult: 0.001};
    unit mole;
  enddef;

  def comp ac as
    var AC47_cyt: uM;
    var AC47_eca: uM;
    var AC56_cav: uM;
    var AC56_cyt: uM;
    var AC_tot: uM;
    var ATP: uM {init: 5000.0};
    var KmATP: uM {init: 315.0};
    var KmGiAC56: uM {init: 0.0465};
    var KmGsAC47: dimensionless {init: 0.031544};
    var KmGsAC56: dimensionless {init: 0.0852};
    var KmGsGiAC56: dimensionless {init: 0.4824};
    var ac_kAC47_cyt_gsa: dimensionless;
    var ac_kAC47_eca_gsa: dimensionless;
    var ac_kAC56_cav_gsa: dimensionless;
    var ac_kAC56_cyt_gsa: dimensionless;
    var afAC47: hertz {init: 3.3757};
    var afAC56: hertz {init: 41.32};
    var basalAC47: dimensionless {init: 0.03135};
    var basalAC56: dimensionless {init: 0.037696};
    var beta_R_b1_tot: uM {pub: in};
    var beta_cav_Gi_bg: uM {pub: in};
    var beta_cav_Gs_aGTP: uM {pub: in};
    var beta_cyt_Gs_aGTP: uM {pub: in};
    var beta_eca_Gs_aGTP: uM {pub: in};
    var dcAMP_AC47_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_AC47_eca: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_AC56_cav: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_AC56_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var fATP: dimensionless;
    var f_AC47_eca: dimensionless {init: 0.16479};
    var f_AC56_AC47: dimensionless;
    var f_AC56_cav: dimensionless {init: 0.087459};
    var gsi: dimensionless;
    var hGsAC47: dimensionless {init: 1.0043};
    var hGsAC56: dimensionless {init: 1.3574};
    var hGsGiAC56: dimensionless {init: 0.6623};
    var kAC47_cyt: hertz;
    var kAC47_eca: hertz;
    var kAC56_cav: hertz;
    var kAC56_cyt: hertz;
    var vGsGiAC56: dimensionless {init: 0.8569};
    var vr_cav: dimensionless {pub: in};
    var vr_cyt: dimensionless {pub: in};
    var vr_eca: dimensionless {pub: in};
    AC47_cyt = (1.0{dimensionless}-f_AC47_eca)*(1.0{dimensionless}-f_AC56_AC47)*AC_tot*vr_cyt;
    AC47_eca = f_AC47_eca*(1.0{dimensionless}-f_AC56_AC47)*AC_tot*vr_eca;
    AC56_cav = f_AC56_cav*f_AC56_AC47*AC_tot*vr_cav;
    AC56_cyt = (1.0{dimensionless}-f_AC56_cav)*f_AC56_AC47*AC_tot*vr_cyt;
    AC_tot = 3.0{dimensionless}*beta_R_b1_tot;
    ac_kAC47_cyt_gsa = pow(beta_cyt_Gs_aGTP*1.0{m3_per_mol_times_1e3}, hGsAC47);
    ac_kAC47_eca_gsa = pow(beta_eca_Gs_aGTP*1.0{m3_per_mol_times_1e3}, hGsAC47);
    ac_kAC56_cav_gsa = pow(beta_cav_Gs_aGTP*1.0{m3_per_mol_times_1e3}, hGsAC56);
    ac_kAC56_cyt_gsa = pow(beta_cyt_Gs_aGTP*1.0{m3_per_mol_times_1e3}, hGsAC56);
    dcAMP_AC47_cyt = kAC47_cyt*AC47_cyt*fATP;
    dcAMP_AC47_eca = kAC47_eca*AC47_eca*fATP;
    dcAMP_AC56_cav = kAC56_cav*AC56_cav*fATP;
    dcAMP_AC56_cyt = kAC56_cyt*AC56_cyt*fATP;
    fATP = ATP/(KmATP+ATP);
    f_AC56_AC47 = 1.0{dimensionless}/(1.0{dimensionless}+0.35{dimensionless});
    gsi = pow(beta_cav_Gs_aGTP*1.0{m3_per_mol_times_1e3}, hGsGiAC56);
    kAC47_cyt = afAC47*(basalAC47+ac_kAC47_cyt_gsa/(KmGsAC47+ac_kAC47_cyt_gsa));
    kAC47_eca = afAC47*(basalAC47+ac_kAC47_eca_gsa/(KmGsAC47+ac_kAC47_eca_gsa));
    kAC56_cav = afAC56*(basalAC56+ac_kAC56_cav_gsa/(KmGsAC56+ac_kAC56_cav_gsa))*(1.0{dimensionless}-(1.0{dimensionless}-vGsGiAC56*gsi/(KmGsGiAC56+gsi))*beta_cav_Gi_bg/(KmGiAC56+beta_cav_Gi_bg));
    kAC56_cyt = afAC56*(basalAC56+ac_kAC56_cyt_gsa/(KmGsAC56+ac_kAC56_cyt_gsa));
  enddef;

  def comp akap_sig as
    var ICaL_akap: uM {init: 0.025};
    var ICaL_akapf: uM;
    var ICaL_arn: uM {pub: out};
    var ICaL_arp: uM;
    var ICaL_tot: uM {pub: out, init: 0.025};
    var ICaLf: uM;
    var ICaLp: uM {init: 6.73713947839316954e-04};
    var Ka_ical: uM {init: 1.27019999999999993e-06};
    var Ka_ryr: uM {init: 6.62979999999999944e-05};
    var Ki: uM {init: 0.01};
    var Kp_ical: uM {init: 0.0063064};
    var Kp_ryr: uM {init: 0.043003};
    var Kr: uM {init: 0.01};
    var Li: uM {init: 0.0001};
    var Lr: uM {init: 0.0001};
    var Mi: uM {init: 0.01};
    var Mr: uM {init: 0.01};
    var PKA_cav: uM {pub: in};
    var PKAf: uM;
    var PP1_cav: uM {pub: in};
    var PP1f_cav: uM;
    var RyR_akap: uM {init: 0.125};
    var RyR_akapf: uM;
    var RyR_arn: uM {pub: out};
    var RyR_arp: uM;
    var RyR_tot: uM {pub: out, init: 0.125};
    var RyRf: uM;
    var RyRp: uM {init: 4.10693810508170991e-03};
    var akap_sig_ICaLf_sum: dimensionless;
    var akap_sig_ICaLp_dif: uM;
    var akap_sig_PKAf_arg: dimensionless;
    var akap_sig_PKAf_b: uM;
    var akap_sig_PKAf_c: mM2_times_1e_minus_6;
    var akap_sig_PKAf_d: mM3_times_1e_minus_9;
    var akap_sig_PKAf_mag: uM;
    var akap_sig_PKAf_rr: mol6_per_m18_times_1e_minus_18;
    var akap_sig_PKAf_x: dimensionless;
    var akap_sig_PKAf_yi: mM3_times_1e_minus_9;
    var akap_sig_PKAf_yr: mM3_times_1e_minus_9;
    var akap_sig_PP1f_cav_arg: dimensionless;
    var akap_sig_PP1f_cav_b: uM;
    var akap_sig_PP1f_cav_c: mM2_times_1e_minus_6;
    var akap_sig_PP1f_cav_d: mM3_times_1e_minus_9;
    var akap_sig_PP1f_cav_mag: uM;
    var akap_sig_PP1f_cav_rr: mol6_per_m18_times_1e_minus_18;
    var akap_sig_PP1f_cav_x: dimensionless;
    var akap_sig_PP1f_cav_yi: mM3_times_1e_minus_9;
    var akap_sig_PP1f_cav_yr: mM3_times_1e_minus_9;
    var akap_sig_RyRf_sum: dimensionless;
    var akap_sig_RyRp_dif: uM;
    var fp_ICaL: dimensionless {pub: out};
    var fp_RyR: dimensionless {pub: out};
    var ka_ical: hertz {init: 5.10090000000000044e-04};
    var ka_ryr: hertz {init: 0.0025548};
    var kp_ical: hertz {init: 0.0006903};
    var kp_ryr: hertz {init: 0.0038257};
    var pka_cav_C: uM {pub: in};
    var time: ms {pub: in};
    ICaL_akapf = (ICaL_akap-ICaL_tot+ICaLf)/((PP1f_cav/Ki+1.0{dimensionless})*(PKAf/Mi+1.0{dimensionless}));
    ICaL_arn = ICaLf*ICaL_akapf*PKAf/(Li*Mi);
    ICaL_arp = ICaL_arn*PP1f_cav/Ki;
    ICaLf = Li/2.0{dimensionless}*(sqrt(sqr(akap_sig_ICaLf_sum)+4.0{dimensionless}*ICaL_tot/Li)-akap_sig_ICaLf_sum);
    ode(ICaLp, time) = 0.001{dimensionless_times_1e3}*(ka_ical*pka_cav_C*akap_sig_ICaLp_dif/(Ka_ical+akap_sig_ICaLp_dif)-kp_ical*PP1_cav*ICaLp/(Kp_ical+ICaLp));
    PKAf = akap_sig_PKAf_mag*cos(akap_sig_PKAf_arg)*(1.0{dimensionless}-akap_sig_PKAf_x)-akap_sig_PKAf_b/3.0{dimensionless};
    PP1f_cav = akap_sig_PP1f_cav_mag*cos(akap_sig_PP1f_cav_arg)*(1.0{dimensionless}-akap_sig_PP1f_cav_x)-akap_sig_PP1f_cav_b/3.0{dimensionless};
    RyR_akapf = (RyR_akap-RyR_tot+RyRf)/((PP1f_cav/Kr+1.0{dimensionless})*(PKAf/Mr+1.0{dimensionless}));
    RyR_arn = RyRf*RyR_akapf*PKAf/(Lr*Mr);
    RyR_arp = RyR_arn*PP1f_cav/Kr;
    RyRf = Lr/2.0{dimensionless}*(sqrt(sqr(akap_sig_RyRf_sum)+4.0{dimensionless}*RyR_tot/Lr)-akap_sig_RyRf_sum);
    ode(RyRp, time) = 0.001{dimensionless_times_1e3}*(ka_ryr*pka_cav_C*akap_sig_RyRp_dif/(Ka_ryr+akap_sig_RyRp_dif)-kp_ryr*PP1_cav*RyRp/(Kp_ryr+RyRp));
    akap_sig_ICaLf_sum = 1.0{dimensionless}+(ICaL_akap-ICaL_tot)/Li;
    akap_sig_ICaLp_dif = ICaL_arp-ICaLp;
    akap_sig_PKAf_arg = atan(akap_sig_PKAf_yi/akap_sig_PKAf_yr)/3.0{dimensionless};
    akap_sig_PKAf_b = ICaL_akap+RyR_akap+Mi+Mr-PKA_cav;
    akap_sig_PKAf_c = ICaL_akap*Mr+RyR_akap*Mi+Mi*Mr-PKA_cav*(Mi+Mr);
    akap_sig_PKAf_d = PKA_cav*Mi*Mr;
    akap_sig_PKAf_mag = pow(akap_sig_PKAf_yr*akap_sig_PKAf_yr+akap_sig_PKAf_yi*akap_sig_PKAf_yi, 1.0{dimensionless}/6.0{dimensionless});
    akap_sig_PKAf_rr = -akap_sig_PKAf_d/27.0{dimensionless}*pow(akap_sig_PKAf_b, 3.0{dimensionless})-akap_sig_PKAf_b*akap_sig_PKAf_b*akap_sig_PKAf_c*akap_sig_PKAf_c/108.0{dimensionless}+akap_sig_PKAf_b*akap_sig_PKAf_c*akap_sig_PKAf_d/6.0{dimensionless}+pow(akap_sig_PKAf_c, 3.0{dimensionless})/27.0{dimensionless}+akap_sig_PKAf_d*akap_sig_PKAf_d/4.0{dimensionless};
    akap_sig_PKAf_x = (akap_sig_PKAf_c/3.0{dimensionless}-akap_sig_PKAf_b*akap_sig_PKAf_b/9.0{dimensionless})/(akap_sig_PKAf_mag*akap_sig_PKAf_mag);
    akap_sig_PKAf_yi = sel
      case akap_sig_PKAf_rr < 0.0{mol6_per_m18_times_1e_minus_18}:
        sqrt(-akap_sig_PKAf_rr);
      otherwise:
        0.0{mM3_times_1e_minus_9};
    endsel;
    akap_sig_PKAf_yr = sel(case akap_sig_PKAf_rr > 0.0{mol6_per_m18_times_1e_minus_18}: sqrt(akap_sig_PKAf_rr), otherwise: 0.0{mM3_times_1e_minus_9})+akap_sig_PKAf_d/2.0{dimensionless}+akap_sig_PKAf_b*akap_sig_PKAf_c/6.0{dimensionless}-pow(akap_sig_PKAf_b, 3.0{dimensionless})/27.0{dimensionless};
    akap_sig_PP1f_cav_arg = atan(akap_sig_PP1f_cav_yi/akap_sig_PP1f_cav_yr)/3.0{dimensionless};
    akap_sig_PP1f_cav_b = ICaL_akap+RyR_akap+Ki+Kr-PP1_cav;
    akap_sig_PP1f_cav_c = ICaL_akap*Kr+RyR_akap*Ki+Ki*Kr-PP1_cav*(Ki+Kr);
    akap_sig_PP1f_cav_d = PP1_cav*Ki*Kr;
    akap_sig_PP1f_cav_mag = pow(akap_sig_PP1f_cav_yr*akap_sig_PP1f_cav_yr+akap_sig_PP1f_cav_yi*akap_sig_PP1f_cav_yi, 1.0{dimensionless}/6.0{dimensionless});
    akap_sig_PP1f_cav_rr = -akap_sig_PP1f_cav_d/27.0{dimensionless}*pow(akap_sig_PP1f_cav_b, 3.0{dimensionless})-akap_sig_PP1f_cav_b*akap_sig_PP1f_cav_b*akap_sig_PP1f_cav_c*akap_sig_PP1f_cav_c/108.0{dimensionless}+akap_sig_PP1f_cav_b*akap_sig_PP1f_cav_c*akap_sig_PP1f_cav_d/6.0{dimensionless}+pow(akap_sig_PP1f_cav_c, 3.0{dimensionless})/27.0{dimensionless}+akap_sig_PP1f_cav_d*akap_sig_PP1f_cav_d/4.0{dimensionless};
    akap_sig_PP1f_cav_x = (akap_sig_PP1f_cav_c/3.0{dimensionless}-akap_sig_PP1f_cav_b*akap_sig_PP1f_cav_b/9.0{dimensionless})/(akap_sig_PP1f_cav_mag*akap_sig_PP1f_cav_mag);
    akap_sig_PP1f_cav_yi = sel
      case akap_sig_PP1f_cav_rr < 0.0{mol6_per_m18_times_1e_minus_18}:
        sqrt(-akap_sig_PP1f_cav_rr);
      otherwise:
        0.0{mM3_times_1e_minus_9};
    endsel;
    akap_sig_PP1f_cav_yr = sel(case akap_sig_PP1f_cav_rr > 0.0{mol6_per_m18_times_1e_minus_18}: sqrt(akap_sig_PP1f_cav_rr), otherwise: 0.0{mM3_times_1e_minus_9})+akap_sig_PP1f_cav_d/2.0{dimensionless}+akap_sig_PP1f_cav_b*akap_sig_PP1f_cav_c/6.0{dimensionless}-pow(akap_sig_PP1f_cav_b, 3.0{dimensionless})/27.0{dimensionless};
    akap_sig_RyRf_sum = 1.0{dimensionless}+(RyR_akap-RyR_tot)/Lr;
    akap_sig_RyRp_dif = RyR_arp-RyRp;
    fp_ICaL = (ICaLp+ICaL_arn)/ICaL_tot;
    fp_RyR = (RyRp+RyR_arn)/RyR_tot;
  enddef;

  def comp beta as
    var Gi_tot: uM {pub: out, init: 0.5};
    var Gs_tot: uM {pub: out};
    var R_b1_tot: uM {pub: out};
    var R_b2_tot: uM {pub: out};
    var f_Gi_cav: dimensionless {pub: out, init: 0.85};
    var f_Gi_eca: dimensionless {pub: out};
    var f_Gs_cav: dimensionless {pub: out, init: 0.0011071};
    var f_Gs_cyt: dimensionless {pub: out};
    var f_Gs_eca: dimensionless {pub: out, init: 0.5664};
    var f_Rb1_cav: dimensionless {pub: out, init: 0.081161};
    var f_Rb1_cyt: dimensionless {pub: out};
    var f_Rb1_eca: dimensionless {pub: out, init: 0.48744};
    var f_Rb2_cav: dimensionless {pub: out, init: 0.85};
    var f_Rb2_eca: dimensionless {pub: out};
    var k_act1_Gi: hertz {pub: out, init: 4.0};
    var k_act1_Gs: hertz {pub: out, init: 4.9054};
    var k_act2_Gi: hertz {pub: out, init: 0.05};
    var k_act2_Gs: hertz {pub: out, init: 0.25945};
    var k_b1_c: uM {pub: out, init: 2.449};
    var k_b1_h: uM {pub: out, init: 0.062};
    var k_b1_l: uM {pub: out, init: 0.567};
    var k_b2_a: uM {pub: out, init: 1.6655};
    var k_b2_c: uM {pub: out, init: 1.8463};
    var k_b2_f: uM {pub: out, init: 0.1};
    var k_b2_h: uM {pub: out, init: 0.012};
    var k_b2_l: uM {pub: out, init: 1.053};
    var k_b2_n: uM {pub: out, init: 1.053};
    var k_grk_dp: hertz {pub: out};
    var k_grk_p: hertz {pub: out};
    var k_hydr_Gi: hertz {pub: out};
    var k_hydr_Gs: hertz {pub: out, init: 0.8};
    var k_pka_dp: hertz {pub: out};
    var k_pka_p: per_mM_per_ms {pub: out};
    var k_reas_Gi: per_mM_per_ms {pub: out};
    var k_reas_Gs: per_mM_per_ms {pub: out, init: 1210.0};
    var rate_bds: per_mM_per_ms {init: 0.35};
    Gs_tot = 224.0{dimensionless}*R_b1_tot;
    R_b1_tot = 0.85{dimensionless}*0.025{uM};
    R_b2_tot = 0.15{dimensionless}*0.025{uM};
    f_Gi_eca = 1.0{dimensionless}-f_Gi_cav;
    f_Gs_cyt = 1.0{dimensionless}-f_Gs_cav-f_Gs_eca;
    f_Rb1_cyt = 1.0{dimensionless}-f_Rb1_cav-f_Rb1_eca;
    f_Rb2_eca = 1.0{dimensionless}-f_Rb2_cav;
    k_grk_dp = rate_bds*0.0009833{uM};
    k_grk_p = rate_bds*0.00133{uM};
    k_hydr_Gi = k_hydr_Gs;
    k_pka_dp = 0.15629{uM}*k_pka_p;
    k_pka_p = rate_bds*0.0065{dimensionless};
    k_reas_Gi = k_reas_Gs;
  enddef;

  def comp beta_cav as
    var GRK: dimensionless {init: 1.0};
    var Gi_aGDP: uM {init: 5.02792845976641014e-04};
    var Gi_aGTP: uM {init: 1.59632196638178009e-03};
    var Gi_abg: uM;
    var Gi_bg: uM {pub: out, init: 2.09911481235842013e-03};
    var Gi_f: uM;
    var Gi_tot: uM {pub: in};
    var Gs_aGDP: uM {init: 6.07316088556675987e-04};
    var Gs_aGTP: uM {pub: out, init: 6.85041638458664965e-03};
    var Gs_abg: uM;
    var Gs_bg: uM {init: 7.45773247314215036e-03};
    var Gs_f: uM;
    var Gs_tot: uM {pub: in};
    var LRGs_tot: uM;
    var LRb1: uM;
    var LRb1Gs: uM;
    var LRb2: uM;
    var LRb2Gi: uM;
    var LRb2Gs: uM;
    var RGs_tot: uM;
    var R_b1_tot: uM;
    var R_b2_tot: uM;
    var Rb1Gs: uM;
    var Rb1_f: uM;
    var Rb1_grk_tot: uM {init: 2.49592854373432000e-10};
    var Rb1_np_tot: uM;
    var Rb1_pka_tot: uM {init: 1.49041813757830998e-02};
    var Rb2Gi: uM;
    var Rb2Gs: uM;
    var Rb2_f: uM;
    var Rb2_grk_tot: uM {init: 8.91799633266019011e-10};
    var Rb2_np_tot: uM;
    var Rb2_pka_f: uM;
    var Rb2_pka_tot: uM {init: 2.75455839709412009e-02};
    var beta_R_b1_tot: uM {pub: in};
    var beta_R_b2_tot: uM {pub: in};
    var beta_cav_Gs_f_a: mol4_per_m12_times_1e_minus_12;
    var beta_cav_Gs_f_arg: dimensionless;
    var beta_cav_Gs_f_b: uM;
    var beta_cav_Gs_f_c: mM2_times_1e_minus_6;
    var beta_cav_Gs_f_c11: mol5_per_m15_times_1e_minus_15;
    var beta_cav_Gs_f_c22: mol5_per_m15_times_1e_minus_15;
    var beta_cav_Gs_f_c33: mol6_per_m18_times_1e_minus_18;
    var beta_cav_Gs_f_d: mM3_times_1e_minus_9;
    var beta_cav_Gs_f_i: uM;
    var beta_cav_Gs_f_mag: uM;
    var beta_cav_Gs_f_r: uM;
    var beta_cav_Gs_f_rr: mol6_per_m18_times_1e_minus_18;
    var beta_cav_Gs_f_x: dimensionless;
    var beta_cav_Gs_f_yi: mM3_times_1e_minus_9;
    var beta_cav_Gs_f_yr: mM3_times_1e_minus_9;
    var beta_cav_Rb2_pka_f_a: uM;
    var beta_cav_Rb2_pka_f_b: mM2_times_1e_minus_6;
    var beta_cav_Rb2_pka_f_c: mM3_times_1e_minus_9;
    var f_Gi_cav: dimensionless {pub: in};
    var f_Gs_cav: dimensionless {pub: in};
    var f_Rb1_cav: dimensionless {pub: in};
    var f_Rb2_cav: dimensionless {pub: in};
    var iso_L: uM {pub: in};
    var k_GsAct_b2: dimensionless {init: 1.0};
    var k_act1_Gi: hertz {pub: in};
    var k_act1_Gs: hertz {pub: in};
    var k_act2_Gi: hertz {pub: in};
    var k_act2_Gs: hertz {pub: in};
    var k_b1_c: uM {pub: in};
    var k_b1_h: uM {pub: in};
    var k_b1_l: uM {pub: in};
    var k_b2_a: uM {pub: in};
    var k_b2_c: uM {pub: in};
    var k_b2_f: uM {pub: in};
    var k_b2_h: uM {pub: in};
    var k_b2_l: uM {pub: in};
    var k_b2_n: uM {pub: in};
    var k_grk_dp: hertz {pub: in};
    var k_grk_p: hertz {pub: in};
    var k_hydr_Gi: hertz {pub: in};
    var k_hydr_Gs: hertz {pub: in};
    var k_pka_dp: hertz {pub: in};
    var k_pka_p: per_mM_per_ms {pub: in};
    var k_reas_Gi: per_mM_per_ms {pub: in};
    var k_reas_Gs: per_mM_per_ms {pub: in};
    var pka_cav_C: uM {pub: in};
    var time: ms {pub: in};
    var vr_cav: dimensionless {pub: in};
    ode(Gi_aGDP, time) = 0.001{dimensionless_times_1e3}*(k_hydr_Gi*Gi_aGTP-k_reas_Gi*Gi_bg*Gi_aGDP);
    ode(Gi_aGTP, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gi*Rb2Gi+k_act1_Gi*LRb2Gi-k_hydr_Gi*Gi_aGTP);
    Gi_abg = f_Gi_cav*Gi_tot*vr_cav-Gi_aGTP-Gi_aGDP;
    ode(Gi_bg, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gi*Rb2Gi+k_act1_Gi*LRb2Gi-k_reas_Gi*Gi_bg*Gi_aGDP);
    Gi_f = Gi_abg/(1.0{dimensionless}+Rb2_pka_f/k_b2_a*(1.0{dimensionless}+iso_L/k_b2_f));
    ode(Gs_aGDP, time) = 0.001{dimensionless_times_1e3}*(k_hydr_Gs*Gs_aGTP-k_reas_Gs*Gs_bg*Gs_aGDP);
    ode(Gs_aGTP, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gs*RGs_tot+k_act1_Gs*LRGs_tot-k_hydr_Gs*Gs_aGTP);
    Gs_abg = f_Gs_cav*Gs_tot*vr_cav-Gs_aGTP-Gs_aGDP;
    ode(Gs_bg, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gs*RGs_tot+k_act1_Gs*LRGs_tot-k_reas_Gs*Gs_bg*Gs_aGDP);
    Gs_f = sqrt(beta_cav_Gs_f_r*beta_cav_Gs_f_r+beta_cav_Gs_f_i*beta_cav_Gs_f_i);
    LRGs_tot = LRb1Gs+k_GsAct_b2*LRb2Gs;
    LRb1 = iso_L*Rb1_f/k_b1_l;
    LRb1Gs = iso_L*Rb1_f*Gs_f/(k_b1_c*k_b1_h);
    LRb2 = iso_L*Rb2_f/k_b2_l;
    LRb2Gi = Rb2Gi*iso_L/k_b2_f;
    LRb2Gs = iso_L*Rb2_f*Gs_f/(k_b2_c*k_b2_h);
    RGs_tot = Rb1Gs+k_GsAct_b2*Rb2Gs;
    R_b1_tot = f_Rb1_cav*beta_R_b1_tot*vr_cav;
    R_b2_tot = f_Rb2_cav*beta_R_b2_tot*vr_cav;
    Rb1Gs = Rb1_f*Gs_f/k_b1_c;
    Rb1_f = Rb1_np_tot/(1.0{dimensionless}+iso_L/k_b1_l+Gs_f*(k_b1_h+iso_L)/(k_b1_c*k_b1_h));
    ode(Rb1_grk_tot, time) = 0.001{dimensionless_times_1e3}*(k_grk_p*GRK*(LRb1+LRb1Gs)-k_grk_dp*Rb1_grk_tot);
    Rb1_np_tot = R_b1_tot-Rb1_pka_tot-Rb1_grk_tot;
    ode(Rb1_pka_tot, time) = 0.001{dimensionless_times_1e3}*(k_pka_p*pka_cav_C*Rb1_np_tot-k_pka_dp*Rb1_pka_tot);
    Rb2Gi = Rb2_pka_f*Gi_f/k_b2_a;
    Rb2Gs = Rb2_f*Gs_f/k_b2_c;
    Rb2_f = Rb2_np_tot/(1.0{dimensionless}+iso_L/k_b2_l+Gs_f*(k_b2_h+iso_L)/(k_b2_c*k_b2_h));
    ode(Rb2_grk_tot, time) = 0.001{dimensionless_times_1e3}*(k_grk_p*GRK*(LRb2+LRb2Gs)-k_grk_dp*Rb2_grk_tot);
    Rb2_np_tot = R_b2_tot-Rb2_pka_tot-Rb2_grk_tot;
    Rb2_pka_f = (-beta_cav_Rb2_pka_f_b+sqrt(beta_cav_Rb2_pka_f_b*beta_cav_Rb2_pka_f_b-4.0{dimensionless}*beta_cav_Rb2_pka_f_a*beta_cav_Rb2_pka_f_c))/(2.0{dimensionless}*beta_cav_Rb2_pka_f_a);
    ode(Rb2_pka_tot, time) = 0.001{dimensionless_times_1e3}*(k_pka_p*pka_cav_C*Rb2_np_tot-k_pka_dp*Rb2_pka_tot);
    beta_cav_Gs_f_a = k_b1_l*k_b2_l*(k_b1_h+iso_L)*(k_b2_h+iso_L);
    beta_cav_Gs_f_arg = atan(beta_cav_Gs_f_yi/beta_cav_Gs_f_yr)/3.0{dimensionless};
    beta_cav_Gs_f_b = (beta_cav_Gs_f_c11+beta_cav_Gs_f_c22)/beta_cav_Gs_f_a+Rb1_np_tot+Rb2_np_tot-Gs_abg;
    beta_cav_Gs_f_c = (beta_cav_Gs_f_c22*(Rb1_np_tot-Gs_abg)+beta_cav_Gs_f_c11*(Rb2_np_tot-Gs_abg)+beta_cav_Gs_f_c33)/beta_cav_Gs_f_a;
    beta_cav_Gs_f_c11 = k_b1_c*k_b1_h*k_b2_l*(k_b2_h+iso_L)*(k_b1_l+iso_L);
    beta_cav_Gs_f_c22 = k_b2_c*k_b2_h*k_b1_l*(k_b1_h+iso_L)*(k_b2_l+iso_L);
    beta_cav_Gs_f_c33 = k_b1_c*k_b2_c*k_b1_h*k_b2_h*(k_b1_l+iso_L)*(k_b2_l+iso_L);
    beta_cav_Gs_f_d = Gs_abg*beta_cav_Gs_f_c33/beta_cav_Gs_f_a;
    beta_cav_Gs_f_i = beta_cav_Gs_f_mag*sin(beta_cav_Gs_f_arg)*(1.0{dimensionless}+beta_cav_Gs_f_x);
    beta_cav_Gs_f_mag = pow(beta_cav_Gs_f_yr*beta_cav_Gs_f_yr+beta_cav_Gs_f_yi*beta_cav_Gs_f_yi, 1.0{dimensionless}/6.0{dimensionless});
    beta_cav_Gs_f_r = beta_cav_Gs_f_mag*cos(beta_cav_Gs_f_arg)*(1.0{dimensionless}-beta_cav_Gs_f_x)-beta_cav_Gs_f_b/3.0{dimensionless};
    beta_cav_Gs_f_rr = -beta_cav_Gs_f_d/27.0{dimensionless}*pow(beta_cav_Gs_f_b, 3.0{dimensionless})-beta_cav_Gs_f_b*beta_cav_Gs_f_b*beta_cav_Gs_f_c*beta_cav_Gs_f_c/108.0{dimensionless}+beta_cav_Gs_f_b*beta_cav_Gs_f_c*beta_cav_Gs_f_d/6.0{dimensionless}+pow(beta_cav_Gs_f_c, 3.0{dimensionless})/27.0{dimensionless}+beta_cav_Gs_f_d*beta_cav_Gs_f_d/4.0{dimensionless};
    beta_cav_Gs_f_x = (beta_cav_Gs_f_c/3.0{dimensionless}-beta_cav_Gs_f_b*beta_cav_Gs_f_b/9.0{dimensionless})/(beta_cav_Gs_f_mag*beta_cav_Gs_f_mag);
    beta_cav_Gs_f_yi = sel
      case beta_cav_Gs_f_rr < 0.0{mol6_per_m18_times_1e_minus_18}:
        sqrt(-beta_cav_Gs_f_rr);
      otherwise:
        0.0{mM3_times_1e_minus_9};
    endsel;
    beta_cav_Gs_f_yr = sel(case beta_cav_Gs_f_rr > 0.0{mol6_per_m18_times_1e_minus_18}: sqrt(beta_cav_Gs_f_rr), otherwise: 0.0{mM3_times_1e_minus_9})+beta_cav_Gs_f_d/2.0{dimensionless}+beta_cav_Gs_f_b*beta_cav_Gs_f_c/6.0{dimensionless}-pow(beta_cav_Gs_f_b, 3.0{dimensionless})/27.0{dimensionless};
    beta_cav_Rb2_pka_f_a = (k_b2_f+iso_L)*(k_b2_n+iso_L)/k_b2_n;
    beta_cav_Rb2_pka_f_b = Gi_abg*(iso_L+k_b2_f)-Rb2_pka_tot*(k_b2_f+iso_L)+k_b2_a*k_b2_f*(1.0{dimensionless}+iso_L/k_b2_n);
    beta_cav_Rb2_pka_f_c = -Rb2_pka_tot*k_b2_a*k_b2_f;
  enddef;

  def comp beta_cyt as
    var GRK: dimensionless {init: 1.0};
    var Gs_aGDP: uM {init: 4.19991861054322011e-04};
    var Gs_aGTP: uM {pub: out, init: 7.31420577213055985e-04};
    var Gs_abg: uM;
    var Gs_bg: uM {init: 1.15141243826746994e-03};
    var Gs_f: uM;
    var Gs_tot: uM {pub: in};
    var LRb1Gs_np: uM;
    var LRb1_np: uM;
    var R_b1_tot: uM;
    var Rb1Gs_np: uM;
    var Rb1_grk_tot: uM {init: 7.07824478944670999e-11};
    var Rb1_np_f: uM;
    var Rb1_np_tot: uM;
    var Rb1_pka_tot: uM {init: 9.44463350378085993e-03};
    var beta_R_b1_tot: uM {pub: in};
    var beta_cyt_Rb1_np_f_a: uM;
    var beta_cyt_Rb1_np_f_b: mM2_times_1e_minus_6;
    var beta_cyt_Rb1_np_f_c: mM3_times_1e_minus_9;
    var f_Gs_cyt: dimensionless {pub: in};
    var f_Rb1_cyt: dimensionless {pub: in};
    var iso_L: uM {pub: in};
    var k_act1_Gs: hertz {pub: in};
    var k_act2_Gs: hertz {pub: in};
    var k_b1_c: uM {pub: in};
    var k_b1_h: uM {pub: in};
    var k_b1_l: uM {pub: in};
    var k_grk_dp: hertz {pub: in};
    var k_grk_p: hertz {pub: in};
    var k_hydr_Gs: hertz {pub: in};
    var k_pka_dp: hertz {pub: in};
    var k_pka_p: per_mM_per_ms {pub: in};
    var k_reas_Gs: per_mM_per_ms {pub: in};
    var pka_cyt_C: uM {pub: in};
    var time: ms {pub: in};
    var vr_cyt: dimensionless {pub: in};
    ode(Gs_aGDP, time) = 0.001{dimensionless_times_1e3}*(k_hydr_Gs*Gs_aGTP-k_reas_Gs*Gs_bg*Gs_aGDP);
    ode(Gs_aGTP, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gs*Rb1Gs_np+k_act1_Gs*LRb1Gs_np-k_hydr_Gs*Gs_aGTP);
    Gs_abg = f_Gs_cyt*Gs_tot*vr_cyt-Gs_aGTP-Gs_aGDP;
    ode(Gs_bg, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gs*Rb1Gs_np+k_act1_Gs*LRb1Gs_np-k_reas_Gs*Gs_bg*Gs_aGDP);
    Gs_f = Gs_abg/(1.0{dimensionless}+Rb1_np_f/k_b1_c*(1.0{dimensionless}+iso_L/k_b1_h));
    LRb1Gs_np = iso_L*Rb1_np_f*Gs_f/(k_b1_c*k_b1_h);
    LRb1_np = iso_L*Rb1_np_f/k_b1_l;
    R_b1_tot = f_Rb1_cyt*beta_R_b1_tot*vr_cyt;
    Rb1Gs_np = Gs_f*Rb1_np_f/k_b1_c;
    ode(Rb1_grk_tot, time) = 0.001{dimensionless_times_1e3}*(k_grk_p*GRK*(LRb1_np+LRb1Gs_np)-k_grk_dp*Rb1_grk_tot);
    Rb1_np_f = (-beta_cyt_Rb1_np_f_b+sqrt(beta_cyt_Rb1_np_f_b*beta_cyt_Rb1_np_f_b-4.0{dimensionless}*beta_cyt_Rb1_np_f_a*beta_cyt_Rb1_np_f_c))/(2.0{dimensionless}*beta_cyt_Rb1_np_f_a);
    Rb1_np_tot = R_b1_tot-Rb1_pka_tot-Rb1_grk_tot;
    ode(Rb1_pka_tot, time) = 0.001{dimensionless_times_1e3}*(k_pka_p*pka_cyt_C*Rb1_np_tot-k_pka_dp*Rb1_pka_tot);
    beta_cyt_Rb1_np_f_a = (k_b1_h+iso_L)*(k_b1_l+iso_L)/k_b1_l;
    beta_cyt_Rb1_np_f_b = Gs_abg*(k_b1_h+iso_L)-Rb1_np_tot*(k_b1_h+iso_L)+k_b1_c*k_b1_h*(1.0{dimensionless}+iso_L/k_b1_l);
    beta_cyt_Rb1_np_f_c = -Rb1_np_tot*k_b1_h*k_b1_c;
  enddef;

  def comp beta_eca as
    var GRK: dimensionless {init: 1.0};
    var Gi_aGDP: uM {init: 3.41341142614041016e-04};
    var Gi_aGTP: uM {init: 3.64315164237569004e-04};
    var Gi_abg: uM;
    var Gi_bg: uM {init: 7.05656306851923029e-04};
    var Gi_f: uM;
    var Gi_tot: uM {pub: in};
    var Gs_aGDP: uM {init: 6.39038440072506948e-04};
    var Gs_aGTP: uM {pub: out, init: 1.84627603007976003e-02};
    var Gs_abg: uM;
    var Gs_bg: uM {init: 1.91017987408719017e-02};
    var Gs_f: uM;
    var Gs_tot: uM {pub: in};
    var LRGs_tot: uM;
    var LRb1: uM;
    var LRb1Gs: uM;
    var LRb2: uM;
    var LRb2Gi: uM;
    var LRb2Gs: uM;
    var RGs_tot: uM;
    var R_b1_tot: uM;
    var R_b2_tot: uM;
    var Rb1Gs: uM;
    var Rb1_f: uM;
    var Rb1_grk_tot: uM {init: 1.18055788874765002e-09};
    var Rb1_np_tot: uM;
    var Rb1_pka_tot: uM {init: 2.03016833596287999e-01};
    var Rb2Gi: uM;
    var Rb2Gs: uM;
    var Rb2_f: uM;
    var Rb2_grk_tot: uM {init: 1.13428924662652000e-10};
    var Rb2_np_tot: uM;
    var Rb2_pka_f: uM;
    var Rb2_pka_tot: uM {init: 1.10248953370551007e-02};
    var beta_R_b1_tot: uM {pub: in};
    var beta_R_b2_tot: uM {pub: in};
    var beta_eca_Gs_f_a: mol4_per_m12_times_1e_minus_12;
    var beta_eca_Gs_f_arg: dimensionless;
    var beta_eca_Gs_f_b: uM;
    var beta_eca_Gs_f_c: mM2_times_1e_minus_6;
    var beta_eca_Gs_f_c11: mol5_per_m15_times_1e_minus_15;
    var beta_eca_Gs_f_c22: mol5_per_m15_times_1e_minus_15;
    var beta_eca_Gs_f_c33: mol6_per_m18_times_1e_minus_18;
    var beta_eca_Gs_f_d: mM3_times_1e_minus_9;
    var beta_eca_Gs_f_i: uM;
    var beta_eca_Gs_f_mag: uM;
    var beta_eca_Gs_f_r: uM;
    var beta_eca_Gs_f_rr: mol6_per_m18_times_1e_minus_18;
    var beta_eca_Gs_f_x: dimensionless;
    var beta_eca_Gs_f_yi: mM3_times_1e_minus_9;
    var beta_eca_Gs_f_yr: mM3_times_1e_minus_9;
    var beta_eca_Rb2_pka_f_a: uM;
    var beta_eca_Rb2_pka_f_b: mM2_times_1e_minus_6;
    var beta_eca_Rb2_pka_f_c: mM3_times_1e_minus_9;
    var f_Gi_eca: dimensionless {pub: in};
    var f_Gs_eca: dimensionless {pub: in};
    var f_Rb1_eca: dimensionless {pub: in};
    var f_Rb2_eca: dimensionless {pub: in};
    var iso_L: uM {pub: in};
    var k_GsAct_b2: dimensionless {init: 1.0};
    var k_act1_Gi: hertz {pub: in};
    var k_act1_Gs: hertz {pub: in};
    var k_act2_Gi: hertz {pub: in};
    var k_act2_Gs: hertz {pub: in};
    var k_b1_c: uM {pub: in};
    var k_b1_h: uM {pub: in};
    var k_b1_l: uM {pub: in};
    var k_b2_a: uM {pub: in};
    var k_b2_c: uM {pub: in};
    var k_b2_f: uM {pub: in};
    var k_b2_h: uM {pub: in};
    var k_b2_l: uM {pub: in};
    var k_b2_n: uM {pub: in};
    var k_grk_dp: hertz {pub: in};
    var k_grk_p: hertz {pub: in};
    var k_hydr_Gi: hertz {pub: in};
    var k_hydr_Gs: hertz {pub: in};
    var k_pka_dp: hertz {pub: in};
    var k_pka_p: per_mM_per_ms {pub: in};
    var k_reas_Gi: per_mM_per_ms {pub: in};
    var k_reas_Gs: per_mM_per_ms {pub: in};
    var pka_eca_C: uM {pub: in};
    var time: ms {pub: in};
    var vr_eca: dimensionless {pub: in};
    ode(Gi_aGDP, time) = 0.001{dimensionless_times_1e3}*(k_hydr_Gi*Gi_aGTP-k_reas_Gi*Gi_bg*Gi_aGDP);
    ode(Gi_aGTP, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gi*Rb2Gi+k_act1_Gi*LRb2Gi-k_hydr_Gi*Gi_aGTP);
    Gi_abg = f_Gi_eca*Gi_tot*vr_eca-Gi_aGTP-Gi_aGDP;
    ode(Gi_bg, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gi*Rb2Gi+k_act1_Gi*LRb2Gi-k_reas_Gi*Gi_bg*Gi_aGDP);
    Gi_f = Gi_abg/(1.0{dimensionless}+Rb2_pka_f/k_b2_a*(1.0{dimensionless}+iso_L/k_b2_f));
    ode(Gs_aGDP, time) = 0.001{dimensionless_times_1e3}*(k_hydr_Gs*Gs_aGTP-k_reas_Gs*Gs_bg*Gs_aGDP);
    ode(Gs_aGTP, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gs*RGs_tot+k_act1_Gs*LRGs_tot-k_hydr_Gs*Gs_aGTP);
    Gs_abg = f_Gs_eca*Gs_tot*vr_eca-Gs_aGTP-Gs_aGDP;
    ode(Gs_bg, time) = 0.001{dimensionless_times_1e3}*(k_act2_Gs*RGs_tot+k_act1_Gs*LRGs_tot-k_reas_Gs*Gs_bg*Gs_aGDP);
    Gs_f = sqrt(beta_eca_Gs_f_r*beta_eca_Gs_f_r+beta_eca_Gs_f_i*beta_eca_Gs_f_i);
    LRGs_tot = LRb1Gs+k_GsAct_b2*LRb2Gs;
    LRb1 = iso_L*Rb1_f/k_b1_l;
    LRb1Gs = iso_L*Rb1_f*Gs_f/(k_b1_c*k_b1_h);
    LRb2 = iso_L*Rb2_f/k_b2_l;
    LRb2Gi = iso_L/k_b2_f*Rb2Gi;
    LRb2Gs = iso_L*Rb2_f*Gs_f/(k_b2_c*k_b2_h);
    RGs_tot = Rb1Gs+k_GsAct_b2*Rb2Gs;
    R_b1_tot = f_Rb1_eca*beta_R_b1_tot*vr_eca;
    R_b2_tot = f_Rb2_eca*beta_R_b2_tot*vr_eca;
    Rb1Gs = Rb1_f*Gs_f/k_b1_c;
    Rb1_f = Rb1_np_tot/(1.0{dimensionless}+iso_L/k_b1_l+Gs_f*(k_b1_h+iso_L)/(k_b1_c*k_b1_h));
    ode(Rb1_grk_tot, time) = 0.001{dimensionless_times_1e3}*(k_grk_p*GRK*(LRb1+LRb1Gs)-k_grk_dp*Rb1_grk_tot);
    Rb1_np_tot = R_b1_tot-Rb1_pka_tot-Rb1_grk_tot;
    ode(Rb1_pka_tot, time) = 0.001{dimensionless_times_1e3}*(k_pka_p*pka_eca_C*Rb1_np_tot-k_pka_dp*Rb1_pka_tot);
    Rb2Gi = Rb2_pka_f*Gi_f/k_b2_a;
    Rb2Gs = Rb2_f*Gs_f/k_b2_c;
    Rb2_f = Rb2_np_tot/(1.0{dimensionless}+iso_L/k_b2_l+Gs_f*(k_b2_h+iso_L)/(k_b2_c*k_b2_h));
    ode(Rb2_grk_tot, time) = 0.001{dimensionless_times_1e3}*(k_grk_p*GRK*(LRb2+LRb2Gs)-k_grk_dp*Rb2_grk_tot);
    Rb2_np_tot = R_b2_tot-Rb2_pka_tot-Rb2_grk_tot;
    Rb2_pka_f = (-beta_eca_Rb2_pka_f_b+sqrt(beta_eca_Rb2_pka_f_b*beta_eca_Rb2_pka_f_b-4.0{dimensionless}*beta_eca_Rb2_pka_f_a*beta_eca_Rb2_pka_f_c))/(2.0{dimensionless}*beta_eca_Rb2_pka_f_a);
    ode(Rb2_pka_tot, time) = 0.001{dimensionless_times_1e3}*(k_pka_p*pka_eca_C*Rb2_np_tot-k_pka_dp*Rb2_pka_tot);
    beta_eca_Gs_f_a = k_b1_l*k_b2_l*(k_b1_h+iso_L)*(k_b2_h+iso_L);
    beta_eca_Gs_f_arg = atan(beta_eca_Gs_f_yi/beta_eca_Gs_f_yr)/3.0{dimensionless};
    beta_eca_Gs_f_b = (beta_eca_Gs_f_c11+beta_eca_Gs_f_c22)/beta_eca_Gs_f_a+Rb1_np_tot+Rb2_np_tot-Gs_abg;
    beta_eca_Gs_f_c = (beta_eca_Gs_f_c22*(Rb1_np_tot-Gs_abg)+beta_eca_Gs_f_c11*(Rb2_np_tot-Gs_abg)+beta_eca_Gs_f_c33)/beta_eca_Gs_f_a;
    beta_eca_Gs_f_c11 = k_b1_c*k_b1_h*k_b2_l*(k_b2_h+iso_L)*(k_b1_l+iso_L);
    beta_eca_Gs_f_c22 = k_b2_c*k_b2_h*k_b1_l*(k_b1_h+iso_L)*(k_b2_l+iso_L);
    beta_eca_Gs_f_c33 = k_b1_c*k_b2_c*k_b1_h*k_b2_h*(k_b1_l+iso_L)*(k_b2_l+iso_L);
    beta_eca_Gs_f_d = Gs_abg*beta_eca_Gs_f_c33/beta_eca_Gs_f_a;
    beta_eca_Gs_f_i = beta_eca_Gs_f_mag*sin(beta_eca_Gs_f_arg)*(1.0{dimensionless}+beta_eca_Gs_f_x);
    beta_eca_Gs_f_mag = pow(beta_eca_Gs_f_yr*beta_eca_Gs_f_yr+beta_eca_Gs_f_yi*beta_eca_Gs_f_yi, 1.0{dimensionless}/6.0{dimensionless});
    beta_eca_Gs_f_r = beta_eca_Gs_f_mag*cos(beta_eca_Gs_f_arg)*(1.0{dimensionless}-beta_eca_Gs_f_x)-beta_eca_Gs_f_b/3.0{dimensionless};
    beta_eca_Gs_f_rr = -beta_eca_Gs_f_d/27.0{dimensionless}*pow(beta_eca_Gs_f_b, 3.0{dimensionless})-beta_eca_Gs_f_b*beta_eca_Gs_f_b*beta_eca_Gs_f_c*beta_eca_Gs_f_c/108.0{dimensionless}+beta_eca_Gs_f_b*beta_eca_Gs_f_c*beta_eca_Gs_f_d/6.0{dimensionless}+pow(beta_eca_Gs_f_c, 3.0{dimensionless})/27.0{dimensionless}+beta_eca_Gs_f_d*beta_eca_Gs_f_d/4.0{dimensionless};
    beta_eca_Gs_f_x = (beta_eca_Gs_f_c/3.0{dimensionless}-beta_eca_Gs_f_b*beta_eca_Gs_f_b/9.0{dimensionless})/(beta_eca_Gs_f_mag*beta_eca_Gs_f_mag);
    beta_eca_Gs_f_yi = sel
      case beta_eca_Gs_f_rr < 0.0{mol6_per_m18_times_1e_minus_18}:
        sqrt(-beta_eca_Gs_f_rr);
      otherwise:
        0.0{mM3_times_1e_minus_9};
    endsel;
    beta_eca_Gs_f_yr = sel(case beta_eca_Gs_f_rr > 0.0{mol6_per_m18_times_1e_minus_18}: sqrt(beta_eca_Gs_f_rr), otherwise: 0.0{mM3_times_1e_minus_9})+beta_eca_Gs_f_d/2.0{dimensionless}+beta_eca_Gs_f_b*beta_eca_Gs_f_c/6.0{dimensionless}-pow(beta_eca_Gs_f_b, 3.0{dimensionless})/27.0{dimensionless};
    beta_eca_Rb2_pka_f_a = (k_b2_f+iso_L)*(k_b2_n+iso_L)/k_b2_n;
    beta_eca_Rb2_pka_f_b = Gi_abg*(iso_L+k_b2_f)-Rb2_pka_tot*(k_b2_f+iso_L)+k_b2_a*k_b2_f*(1.0{dimensionless}+iso_L/k_b2_n);
    beta_eca_Rb2_pka_f_c = -Rb2_pka_tot*k_b2_a*k_b2_f;
  enddef;

  def comp calcium as
    var AF: m2_mol_per_s_per_A_times_1e_minus_4 {pub: in};
    var Ca: mM {pub: out};
    var Ca_CaL: mM {pub: out};
    var Ca_jsr: mM {pub: out};
    var Ca_nsr: mM {pub: out, init: 1.191};
    var Ca_sr: mM {pub: out};
    var ICa_tot: uA_per_cm2 {pub: out};
    var ICab: uA_per_cm2 {pub: in};
    var INaCa: uA_per_cm2 {pub: in};
    var INaCaSR: uA_per_cm2 {pub: in};
    var Idiff_Ca: mM_per_ms {pub: in};
    var Idiff_sr: mM_per_ms {pub: in};
    var IpCa: uA_per_cm2 {pub: in};
    var Irel: mM_per_ms {pub: in};
    var Itr: mM_per_ms {pub: in};
    var Iup: mM_per_ms {pub: in};
    var Ka_tni: uM {init: 2.71430000000000008e-05};
    var Kp_tni: uM {init: 0.26714};
    var PP2A: uM {pub: in};
    var bar_sum: mM;
    var bsl_bar: mM {init: 1.124};
    var bsl_km: mM {init: 0.0087};
    var bsr_bar: mM {init: 0.047};
    var bsr_km: mM {init: 0.00087};
    var calcium_Ca_CaL_b: mM;
    var calcium_Ca_CaL_c: mM2;
    var calcium_Ca_CaL_d: mM3;
    var calcium_Ca_b: mM;
    var calcium_Ca_c: mM2;
    var calcium_Ca_d: mM3;
    var calcium_Ca_jsr_b: mM;
    var calcium_Ca_jsr_c: mM2;
    var calcium_Ca_nsr_r1: dimensionless;
    var calcium_Ca_sr_b: mM;
    var calcium_Ca_sr_c: mM2;
    var calcium_Ca_sr_d: mM3;
    var calcium_fhat_val: dimensionless;
    var calcium_uCa_CaL_r1: mol_per_m_per_s_per_A_times_1e5;
    var calcium_uCa_CaL_r2: dimensionless;
    var calcium_uCa_r1: mol_per_m_per_s_per_A_times_1e5;
    var calcium_uCa_r2: dimensionless;
    var calcium_uCa_sr_r1: mol_per_m_per_s_per_A_times_1e5;
    var calcium_uCa_sr_r2: dimensionless;
    var cbar: mM {init: 0.05};
    var csqn_bar: mM {init: 10.0};
    var csqn_km: mM {init: 0.8};
    var f_tni: dimensionless {init: 6.73518785672381992e-01};
    var fhat: dimensionless;
    var ical_ICaL: uA_per_cm2 {pub: in};
    var ka_tni: hertz {init: 0.10408};
    var kc: mM {init: 0.00238};
    var km_pro: mM2;
    var km_sum: mM;
    var kp_tni: hertz {init: 0.052633};
    var kpro: mM2;
    var ksum: mM;
    var kt: mM;
    var ktn: mM {init: 0.0005};
    var ktp: mM;
    var pka_cyt_C: uM {pub: in};
    var r3: dimensionless;
    var ss_pro: mM2;
    var ss_sum: mM;
    var tbar: mM {init: 0.07};
    var time: ms {pub: in};
    var uCa: mM {init: 0.013394};
    var uCa_CaL: mM {init: 0.023413};
    var uCa_jsr: mM {init: 6.8659};
    var uCa_sr: mM {init: 0.023413};
    var v_CaL: uL {pub: in};
    var v_cyt: uL {pub: in};
    var v_jsr: uL {pub: in};
    var v_nsr: uL {pub: in};
    var v_sr: uL {pub: in};
    Ca = -calcium_Ca_b/3.0{dimensionless}+2.0{dimensionless}/3.0{dimensionless}*sqrt(calcium_Ca_b*calcium_Ca_b-3.0{dimensionless}*calcium_Ca_c)*cos(acos((9.0{dimensionless}*calcium_Ca_b*calcium_Ca_c-2.0{dimensionless}*calcium_Ca_b*calcium_Ca_b*calcium_Ca_b-27.0{dimensionless}*calcium_Ca_d)/(2.0{dimensionless}*pow(calcium_Ca_b*calcium_Ca_b-3.0{dimensionless}*calcium_Ca_c, 1.5{dimensionless})))/3.0{dimensionless});
    Ca_CaL = -calcium_Ca_CaL_b/3.0{dimensionless}+2.0{dimensionless}/3.0{dimensionless}*sqrt(calcium_Ca_CaL_b*calcium_Ca_CaL_b-3.0{dimensionless}*calcium_Ca_CaL_c)*cos(acos((9.0{dimensionless}*calcium_Ca_CaL_b*calcium_Ca_CaL_c-2.0{dimensionless}*calcium_Ca_CaL_b*calcium_Ca_CaL_b*calcium_Ca_CaL_b-27.0{dimensionless}*calcium_Ca_CaL_d)/(2.0{dimensionless}*pow(calcium_Ca_CaL_b*calcium_Ca_CaL_b-3.0{dimensionless}*calcium_Ca_CaL_c, 1.5{dimensionless})))/3.0{dimensionless});
    Ca_jsr = (sqrt(calcium_Ca_jsr_b*calcium_Ca_jsr_b+4.0{dimensionless}*calcium_Ca_jsr_c)-calcium_Ca_jsr_b)/2.0{dimensionless};
    ode(Ca_nsr, time) = Iup-calcium_Ca_nsr_r1*Itr;
    Ca_sr = -calcium_Ca_sr_b/3.0{dimensionless}+2.0{dimensionless}/3.0{dimensionless}*sqrt(calcium_Ca_sr_b*calcium_Ca_sr_b-3.0{dimensionless}*calcium_Ca_sr_c)*cos(acos((9.0{dimensionless}*calcium_Ca_sr_b*calcium_Ca_sr_c-2.0{dimensionless}*calcium_Ca_sr_b*calcium_Ca_sr_b*calcium_Ca_sr_b-27.0{dimensionless}*calcium_Ca_sr_d)/(2.0{dimensionless}*pow(calcium_Ca_sr_b*calcium_Ca_sr_b-3.0{dimensionless}*calcium_Ca_sr_c, 1.5{dimensionless})))/3.0{dimensionless});
    ICa_tot = ical_ICaL+ICab+IpCa-INaCa*2.0{dimensionless}-INaCaSR*2.0{dimensionless};
    bar_sum = bsr_bar+bsl_bar;
    calcium_Ca_CaL_b = ss_sum-uCa_CaL;
    calcium_Ca_CaL_c = ss_pro-uCa_CaL*km_sum;
    calcium_Ca_CaL_d = -km_pro*uCa_CaL;
    calcium_Ca_b = ksum-uCa+cbar+tbar;
    calcium_Ca_c = kpro-uCa*ksum+tbar*kc+cbar*kt;
    calcium_Ca_d = -kpro*uCa;
    calcium_Ca_jsr_b = csqn_bar+csqn_km-uCa_jsr;
    calcium_Ca_jsr_c = uCa_jsr*csqn_km;
    calcium_Ca_nsr_r1 = v_jsr/v_nsr;
    calcium_Ca_sr_b = ss_sum-uCa_sr;
    calcium_Ca_sr_c = ss_pro-uCa_sr*km_sum;
    calcium_Ca_sr_d = -km_pro*uCa_sr;
    calcium_fhat_val = (f_tni-0.6735188{dimensionless})/(0.9991797{dimensionless}-0.6735188{dimensionless});
    calcium_uCa_CaL_r1 = AF/(2.0{dimensionless}*v_CaL);
    calcium_uCa_CaL_r2 = v_sr/v_CaL;
    calcium_uCa_r1 = AF/(2.0{dimensionless}*v_cyt);
    calcium_uCa_r2 = v_nsr/v_cyt;
    calcium_uCa_sr_r1 = -AF/v_sr;
    calcium_uCa_sr_r2 = -v_jsr/v_sr;
    ode(f_tni, time) = 0.001{dimensionless_times_1e3}*(ka_tni*pka_cyt_C*(1.0{dimensionless}-f_tni)/(Ka_tni+(1.0{dimensionless}-f_tni)*1.0{uM})-kp_tni*PP2A*f_tni/(Kp_tni+f_tni*1.0{uM}));
    fhat = sel
      case calcium_fhat_val < 0.0{dimensionless}:
        0.0{dimensionless};
      otherwise:
        calcium_fhat_val;
    endsel;
    km_pro = bsr_km*bsl_km;
    km_sum = bsr_km+bsl_km;
    kpro = kt*kc;
    ksum = kt+kc;
    kt = (1.0{dimensionless}-fhat)*ktn+fhat*ktp;
    ktp = 1.5{dimensionless}*ktn;
    r3 = v_sr/v_cyt;
    ss_pro = bsr_bar*bsl_km+bsl_bar*bsr_km+km_pro;
    ss_sum = bar_sum+km_sum;
    ode(uCa, time) = -calcium_uCa_r1*(ICab+IpCa-2.0{dimensionless}*INaCa)-calcium_uCa_r2*Iup+r3*Idiff_Ca;
    ode(uCa_CaL, time) = -calcium_uCa_CaL_r1*ical_ICaL+calcium_uCa_CaL_r2*Idiff_sr;
    ode(uCa_jsr, time) = Itr-Irel;
    ode(uCa_sr, time) = -(calcium_uCa_sr_r1*INaCaSR+calcium_uCa_sr_r2*Irel+Idiff_Ca+Idiff_sr);
  enddef;

  def comp camk as
    var CaMK0: dimensionless {init: 0.05};
    var Ca_sr: mM {pub: in};
    var K: dimensionless {init: 0.25};
    var Km: mM {init: 0.0015};
    var PP1_cav: uM {pub: in};
    var PP1_eca: uM {pub: in};
    var PP1_tot: uM;
    var PP1f_cyt: uM {pub: in};
    var active: dimensionless {pub: out};
    var bound: dimensionless;
    var c: dimensionless;
    var camk_f_ryr_d: dimensionless;
    var camk_trap_alpha: mS_per_uF {init: 0.05};
    var camk_trap_beta: mS_per_uF {init: 0.00068};
    var f_ical: dimensionless {pub: out, init: 0.0};
    var f_ik1: dimensionless {pub: out, init: 0.0};
    var f_ina: dimensionless {pub: out, init: 0.0};
    var f_ito: dimensionless {pub: out, init: 0.0};
    var f_plb: dimensionless {pub: out, init: 0.0};
    var f_ryr: dimensionless {pub: out, init: 0.0};
    var tau_cal: ms;
    var tau_ik1: ms;
    var tau_ina: ms;
    var tau_ito: ms;
    var tau_plb: ms {init: 100000.0};
    var tau_ryr: ms {init: 10000.0};
    var time: ms {pub: in};
    var trap: dimensionless {init: 0.0017546};
    var vr_cav: dimensionless {pub: in};
    var vr_cyt: dimensionless {pub: in};
    var vr_eca: dimensionless {pub: in};
    PP1_tot = PP1_cav/vr_cav+PP1_eca/vr_eca+PP1f_cyt/vr_cyt;
    active = bound+trap;
    bound = CaMK0*(1.0{dimensionless}-trap)/(1.0{dimensionless}+Km/Ca_sr);
    c = active/(active+K);
    camk_f_ryr_d = 1.0{dimensionless}/(1.0{dimensionless}+sqr(K/active));
    ode(f_ical, time) = (c-f_ical)/tau_cal;
    ode(f_ik1, time) = (c-f_ik1)/tau_ik1;
    ode(f_ina, time) = (c-f_ina)/tau_ina;
    ode(f_ito, time) = (c-f_ito)/tau_ito;
    ode(f_plb, time) = (c-f_plb)/tau_plb;
    ode(f_ryr, time) = (camk_f_ryr_d-f_ryr)/tau_ryr;
    tau_cal = tau_ryr;
    tau_ik1 = tau_plb;
    tau_ina = tau_plb;
    tau_ito = tau_plb;
    ode(trap, time) = camk_trap_alpha*bound*active-camk_trap_beta*trap*(0.1{dimensionless}+0.9{dimensionless}*PP1_tot/0.1371{uM});
  enddef;

  def comp camp as
    var cAMP_cav: uM {pub: out, init: 3.47102959606005013e-01};
    var cAMP_cyt: uM {pub: out, init: 4.74081735738210996e-01};
    var cAMP_eca: uM {pub: out, init: 9.62359241535767040e+00};
    var camp_cAMP_cav_j1: mol_per_m3_per_s_times_1e_minus_3;
    var camp_cAMP_cav_j2: mol_per_m3_per_s_times_1e_minus_3;
    var camp_cAMP_cav_pde: mol_per_m3_per_s_times_1e_minus_3;
    var camp_cAMP_cyt_j1: mol_per_m3_per_s_times_1e_minus_3;
    var camp_cAMP_cyt_j2: mol_per_m3_per_s_times_1e_minus_3;
    var camp_cAMP_cyt_pde: mol_per_m3_per_s_times_1e_minus_3;
    var camp_cAMP_eca_j1: mol_per_m3_per_s_times_1e_minus_3;
    var camp_cAMP_eca_j2: mol_per_m3_per_s_times_1e_minus_3;
    var camp_cAMP_eca_pde: mol_per_m3_per_s_times_1e_minus_3;
    var dcAMP_AC47_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_AC47_eca: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_AC56_cav: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_AC56_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_PDE2_cav: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_PDE2_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_PDE2_eca: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_PDE3_cav: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_PDE3_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_PDE4_cav: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_PDE4_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var dcAMP_PDE4_eca: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var j_cav_cyt: m3_per_s_times_1e_minus_9;
    var j_cav_eca: m3_per_s_times_1e_minus_9;
    var j_eca_cyt: m3_per_s_times_1e_minus_9;
    var pka_cav_dcAMP: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var pka_cyt_dcAMP: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var pka_eca_dcAMP: mol_per_m3_per_s_times_1e_minus_3 {pub: in};
    var time: ms {pub: in};
    var v_cav: uL {pub: in};
    var v_cyt: uL {pub: in};
    var v_eca: uL {pub: in};
    ode(cAMP_cav, time) = 0.001{dimensionless_times_1e3}*(pka_cav_dcAMP+dcAMP_AC56_cav-camp_cAMP_cav_pde-camp_cAMP_cav_j1-camp_cAMP_cav_j2);
    ode(cAMP_cyt, time) = 0.001{dimensionless_times_1e3}*(pka_cyt_dcAMP+dcAMP_AC47_cyt+dcAMP_AC56_cyt-camp_cAMP_cyt_pde+camp_cAMP_cyt_j1+camp_cAMP_cyt_j2);
    ode(cAMP_eca, time) = 0.001{dimensionless_times_1e3}*(pka_eca_dcAMP+dcAMP_AC47_eca-camp_cAMP_eca_pde+camp_cAMP_eca_j1-camp_cAMP_eca_j2);
    camp_cAMP_cav_j1 = j_cav_eca*(cAMP_cav-cAMP_eca)/v_cav;
    camp_cAMP_cav_j2 = j_cav_cyt*(cAMP_cav-cAMP_cyt)/v_cav;
    camp_cAMP_cav_pde = dcAMP_PDE2_cav+dcAMP_PDE3_cav+dcAMP_PDE4_cav;
    camp_cAMP_cyt_j1 = j_cav_cyt*(cAMP_cav-cAMP_cyt)/v_cyt;
    camp_cAMP_cyt_j2 = j_eca_cyt*(cAMP_eca-cAMP_cyt)/v_cyt;
    camp_cAMP_cyt_pde = dcAMP_PDE2_cyt+dcAMP_PDE3_cyt+dcAMP_PDE4_cyt;
    camp_cAMP_eca_j1 = j_cav_eca*(cAMP_cav-cAMP_eca)/v_eca;
    camp_cAMP_eca_j2 = j_eca_cyt*(cAMP_eca-cAMP_cyt)/v_eca;
    camp_cAMP_eca_pde = dcAMP_PDE2_eca+dcAMP_PDE4_eca;
    j_cav_cyt = 7.5e-14{dimensionless}*1000000.0{m3_per_s_times_1e_minus_9};
    j_cav_eca = 5e-15{dimensionless}*1000000.0{m3_per_s_times_1e_minus_9};
    j_eca_cyt = 9e-15{dimensionless}*1000000.0{m3_per_s_times_1e_minus_9};
  enddef;

  def comp cell as
    var AF: m2_mol_per_s_per_A_times_1e_minus_4 {pub: out};
    var F: C_per_mol {pub: in};
    var capArea: cm2;
    var geoArea: cm2;
    var length: cm {init: 0.01};
    var pi: dimensionless {init: 3.14159265358979312e+00};
    var radius: cm {init: 0.0011};
    var v_CaL: uL {pub: out};
    var v_cav: uL {pub: out};
    var v_cyt: uL {pub: out};
    var v_eca: uL {pub: out};
    var v_jsr: uL {pub: out};
    var v_nsr: uL {pub: out};
    var v_sr: uL {pub: out};
    var volume: uL;
    var vr_cav: dimensionless {pub: out};
    var vr_cyt: dimensionless {pub: out};
    var vr_eca: dimensionless {pub: out};
    AF = capArea/F;
    capArea = 2.0{dimensionless}*geoArea;
    geoArea = 2.0{dimensionless}*pi*radius*(radius+length);
    v_CaL = volume*0.002{dimensionless};
    v_cav = 0.02{dimensionless}*volume;
    v_cyt = volume*0.678{dimensionless};
    v_eca = 0.04{dimensionless}*volume;
    v_jsr = volume*0.0048{dimensionless};
    v_nsr = volume*0.0552{dimensionless};
    v_sr = volume*0.02{dimensionless};
    volume = 1000.0{dimensionless_times_1e_minus_3}*pi*radius*radius*length;
    vr_cav = volume/v_cav;
    vr_cyt = volume/v_cyt;
    vr_eca = volume/v_eca;
  enddef;

  def comp chloride as
    var AF: m2_mol_per_s_per_A_times_1e_minus_4 {pub: in};
    var CTKCl: mM_per_ms {pub: in};
    var CTNaCl: mM_per_ms {pub: in};
    var Cl: mM {pub: out, init: 20.273};
    var Cl_sr: mM {pub: out, init: 20.273};
    var IClCa: uA_per_cm2 {pub: in};
    var ICl_tot: uA_per_cm2 {pub: out};
    var IClb: uA_per_cm2 {pub: in};
    var Idiff_Cl: mM_per_ms {pub: in};
    var chloride_Cl_r1: mol_per_m_per_s_per_A_times_1e5;
    var chloride_Cl_r2: dimensionless;
    var chloride_Cl_sr_r1: mol_per_m_per_s_per_A_times_1e5;
    var time: ms {pub: in};
    var v_cyt: uL {pub: in};
    var v_sr: uL {pub: in};
    ode(Cl, time) = chloride_Cl_r1*IClb+CTNaCl+CTKCl+chloride_Cl_r2*Idiff_Cl;
    ode(Cl_sr, time) = chloride_Cl_sr_r1*IClCa-Idiff_Cl;
    ICl_tot = IClb+IClCa;
    chloride_Cl_r1 = AF/v_cyt;
    chloride_Cl_r2 = v_sr/v_cyt;
    chloride_Cl_sr_r1 = AF/v_sr;
  enddef;

  def comp ctkcl as
    var CTKCl: mM_per_ms {pub: out};
    var ECl: mV {pub: in};
    var EK: mV {pub: in};
    var KClBar: mM_per_ms {init: 1.77e-05};
    var ctkcl_CTKCl_z1: mV;
    var ctkcl_CTKCl_z2: mV {init: 87.8251};
    CTKCl = KClBar*ctkcl_CTKCl_z1/(ctkcl_CTKCl_z1+ctkcl_CTKCl_z2);
    ctkcl_CTKCl_z1 = EK-ECl;
  enddef;

  def comp ctnacl as
    var CTNaCl: mM_per_ms {pub: out};
    var ECl: mV {pub: in};
    var ENa: mV {pub: in};
    var NaClBar: mM_per_ms {init: 2.46108000000000016e-05};
    var ctnacl_CTNaCl_z1: g4_m8_per_s12_per_A4;
    var ctnacl_CTNaCl_z2: g4_m8_per_s12_per_A4;
    CTNaCl = NaClBar*ctnacl_CTNaCl_z1/(ctnacl_CTNaCl_z1+ctnacl_CTNaCl_z2);
    ctnacl_CTNaCl_z1 = pow(ENa-ECl, 4.0{dimensionless});
    ctnacl_CTNaCl_z2 = pow(87.8251{mV}, 4.0{dimensionless});
  enddef;

  def comp diff as
    var Ca: mM {pub: in};
    var Ca_CaL: mM {pub: in};
    var Ca_jsr: mM {pub: in};
    var Ca_nsr: mM {pub: in};
    var Ca_sr: mM {pub: in};
    var Cl: mM {pub: in};
    var Cl_sr: mM {pub: in};
    var Idiff_Ca: mM_per_ms {pub: out};
    var Idiff_Cl: mM_per_ms {pub: out};
    var Idiff_Na: mM_per_ms {pub: out};
    var Idiff_sr: mM_per_ms {pub: out};
    var Itr: mM_per_ms {pub: out};
    var Na: mM {pub: in};
    var Na_sr: mM {pub: in};
    var tau: ms {init: 0.2};
    var tau_sr: ms {init: 0.02};
    var tau_tr: ms {init: 75.0};
    Idiff_Ca = (Ca_sr-Ca)/tau;
    Idiff_Cl = (Cl_sr-Cl)/tau;
    Idiff_Na = (Na_sr-Na)/tau;
    Idiff_sr = (Ca_sr-Ca_CaL)/tau_sr;
    Itr = (Ca_nsr-Ca_jsr)/tau_tr;
  enddef;

  def comp engine as
    var time: ms {pub: out};
  enddef;

  def comp extra as
    var Cao: mM {pub: out, init: 1.8};
    var Clo: mM {pub: out, init: 100.0};
    var Ko: mM {pub: out, init: 5.4};
    var Nao: mM {pub: out, init: 140.0};
  enddef;

  def comp icab as
    var Ca: mM {pub: in};
    var Cao: mM {pub: in};
    var F: C_per_mol {pub: in};
    var FRT: per_mV {pub: in};
    var ICab: uA_per_cm2 {pub: out};
    var V: mV {pub: in};
    var efrt: dimensionless;
    var pCab: cm_per_s {init: 1.995e-07};
    var vfrt: dimensionless;
    ICab = pCab*2.0{dimensionless}*F*vfrt*(Ca*efrt-0.341{dimensionless}*Cao)/(efrt-1.0{dimensionless});
    efrt = exp(vfrt);
    vfrt = 2.0{dimensionless}*V*FRT;
  enddef;

  def comp ical as
    var ICaL: uA_per_cm2 {pub: out};
    var ICaL_arn: uM {pub: in};
    var ICaL_tot: uM {pub: in};
    var f_hat: dimensionless;
    var fp_ICaL: dimensionless {pub: in};
    var ical_camk_ICaL: uA_per_cm2 {pub: in};
    var ical_f_hat_ratio: dimensionless;
    var ical_f_hat_val: dimensionless;
    var ical_np_ICaL: uA_per_cm2 {pub: in};
    ICaL = (1.0{dimensionless}-f_hat)*ical_np_ICaL+f_hat*ical_camk_ICaL;
    f_hat = sel
      case ical_f_hat_val < 0.0{dimensionless}:
        0.0{dimensionless};
      otherwise:
        ical_f_hat_val;
    endsel;
    ical_f_hat_ratio = 0.0269{dimensionless}+ICaL_arn/ICaL_tot;
    ical_f_hat_val = (fp_ICaL-ical_f_hat_ratio)/(0.9273{dimensionless}-ical_f_hat_ratio);
  enddef;

  def comp ical_camk as
    var C: dimensionless {init: 1.0};
    var CI: dimensionless {init: 0.0};
    var CIs: dimensionless {init: 0.0};
    var Ca_sr: mM {pub: in};
    var Cao: mM {pub: in};
    var Cs: dimensionless {init: 0.0};
    var FFRT: s4_A2_per_g_per_m2_per_mol {pub: in};
    var FRT: per_mV {pub: in};
    var IBar: uA_per_cm2;
    var ICaL: uA_per_cm2 {pub: out};
    var O: dimensionless {init: 0.0};
    var OI: dimensionless {init: 0.0};
    var OIs: dimensionless {init: 0.0};
    var Os: dimensionless {init: 0.0};
    var PCa: cm_per_s;
    var V: mV {pub: in};
    var ac_inf: dimensionless;
    var ac_tau: ms {pub: in};
    var alpha: mS_per_uF;
    var beta: mS_per_uF;
    var delta: mS_per_uF;
    var delta1: mS_per_uF;
    var delta_tau: dimensionless;
    var f_ical: dimensionless {pub: in};
    var ical_camk_IBar_vv: dimensionless;
    var ical_camk_delta1_xs_cor: mS_per_uF;
    var ical_camk_delta1_y_cor: mS_per_uF;
    var in_a: dimensionless {pub: in};
    var in_b: dimensionless {pub: in};
    var in_hi_inf: dimensionless;
    var in_hi_tau: ms;
    var in_inf: dimensionless;
    var in_lo_inf: dimensionless;
    var in_lo_tau: ms;
    var inca: dimensionless;
    var ss_cal_10: dimensionless;
    var ss_cal_4: dimensionless;
    var theta: mS_per_uF {init: 1.0};
    var theta1: mS_per_uF {init: 1e-06};
    var time: ms {pub: in};
    var x: mS_per_uF;
    var xs: mS_per_uF;
    var y: mS_per_uF;
    var ys: mS_per_uF;
    ode(C, time) = -(alpha+delta+y)*C+beta*O+theta*Cs+x*CI;
    ode(CI, time) = -(alpha+delta1+x)*CI+y*C+theta1*CIs+beta*OI;
    ode(CIs, time) = -(alpha+theta1+xs)*CIs+ys*Cs+delta1*CI+beta*OIs;
    ode(Cs, time) = -(alpha+theta+ys)*Cs+delta*C+beta*Os+xs*CIs;
    IBar = PCa*4.0{dimensionless}*V*FFRT*(Ca_sr*ical_camk_IBar_vv-0.341{dimensionless}*Cao)/(ical_camk_IBar_vv-1.0{dimensionless});
    ICaL = IBar*(O+Os);
    ode(O, time) = -(beta+delta+y)*O+alpha*C+theta*Os+x*OI;
    ode(OI, time) = -(beta+delta1+x)*OI+y*O+theta1*OIs+alpha*CI;
    ode(OIs, time) = -(beta+theta1+xs)*OIs+ys*Os+delta1*OI+alpha*CIs;
    ode(Os, time) = -(beta+theta+ys)*Os+delta*O+alpha*Cs+xs*OIs;
    PCa = 0.0002579{cm_per_s}*(1.0{dimensionless}+0.1{dimensionless}*f_ical);
    ac_inf = 1.0{dimensionless}/((1.0{dimensionless}+exp((4.798{mV}+V)/(-7.5699{mV})))*(1.0{dimensionless}+exp((25.0{mV}+V)/(-5.0{mV}))));
    alpha = ac_inf/ac_tau;
    beta = (1.0{dimensionless}-ac_inf)/ac_tau;
    delta = 6.0{mS_per_uF}/ss_cal_4;
    delta1 = theta1*(x*ys*delta)/(ical_camk_delta1_y_cor*ical_camk_delta1_xs_cor*theta);
    delta_tau = 0.1{dimensionless}*f_ical;
    ical_camk_IBar_vv = exp(2.0{dimensionless}*V*FRT);
    ical_camk_delta1_xs_cor = sel
      case abs(xs) < 1e-12{mS_per_uF}:
        1e-12{mS_per_uF};
      otherwise:
        xs;
    endsel;
    ical_camk_delta1_y_cor = sel
      case abs(y) < 1e-12{mS_per_uF}:
        1e-12{mS_per_uF};
      otherwise:
        y;
    endsel;
    in_hi_inf = (0.0001{dimensionless}+in_inf)/1.0001{dimensionless};
    in_hi_tau = 1.0{ms}/(in_a+in_b/inca);
    in_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((29.979{mV}+V)/3.1775{mV}));
    in_lo_inf = (0.1{dimensionless}+in_inf)/1.1{dimensionless};
    in_lo_tau = 1.0{ms}/(in_a+in_b/38.494{dimensionless});
    inca = 32.5{dimensionless}-(18.0{dimensionless}-delta_tau)/ss_cal_4-10.0{dimensionless}/ss_cal_10;
    ss_cal_10 = 1.0{dimensionless}+pow(0.01{mM}/Ca_sr, 10.0{dimensionless});
    ss_cal_4 = 1.0{dimensionless}+pow(0.002{mM}/Ca_sr, 4.0{dimensionless});
    x = in_lo_inf/in_lo_tau;
    xs = in_hi_inf/in_hi_tau;
    y = (1.0{dimensionless}-in_lo_inf)/in_lo_tau;
    ys = (1.0{dimensionless}-in_hi_inf)/in_hi_tau;
  enddef;

  def comp ical_np as
    var C: dimensionless {init: 1.0};
    var CI: dimensionless {init: 0.0};
    var CIs: dimensionless {init: 0.0};
    var Ca_sr: mM {pub: in};
    var Cao: mM {pub: in};
    var Cs: dimensionless {init: 0.0};
    var FFRT: s4_A2_per_g_per_m2_per_mol {pub: in};
    var FRT: per_mV {pub: in};
    var IBar: uA_per_cm2;
    var ICaL: uA_per_cm2 {pub: out};
    var O: dimensionless {init: 0.0};
    var OI: dimensionless {init: 0.0};
    var OIs: dimensionless {init: 0.0};
    var Os: dimensionless {init: 0.0};
    var PCa: cm_per_s;
    var V: mV {pub: in};
    var ac_inf: dimensionless;
    var ac_tau: ms {pub: out};
    var alpha: mS_per_uF;
    var beta: mS_per_uF;
    var delta: mS_per_uF;
    var delta1: mS_per_uF;
    var delta_tau: dimensionless;
    var f_ical: dimensionless {pub: in};
    var ical_np_IBar_vv: dimensionless;
    var ical_np_delta1_xs_cor: mS_per_uF;
    var ical_np_delta1_y_cor: mS_per_uF;
    var in_a: dimensionless {pub: out};
    var in_b: dimensionless {pub: out};
    var in_hi_inf: dimensionless;
    var in_hi_tau: ms;
    var in_inf: dimensionless;
    var in_lo_inf: dimensionless;
    var in_lo_tau: ms;
    var inca: dimensionless;
    var ss_cal_10: dimensionless;
    var ss_cal_4: dimensionless;
    var theta: mS_per_uF {init: 1.0};
    var theta1: mS_per_uF {init: 1e-06};
    var time: ms {pub: in};
    var x: mS_per_uF;
    var xs: mS_per_uF;
    var y: mS_per_uF;
    var ys: mS_per_uF;
    ode(C, time) = -(alpha+delta+y)*C+beta*O+theta*Cs+x*CI;
    ode(CI, time) = -(alpha+delta1+x)*CI+y*C+theta1*CIs+beta*OI;
    ode(CIs, time) = -(alpha+theta1+xs)*CIs+ys*Cs+delta1*CI+beta*OIs;
    ode(Cs, time) = -(alpha+theta+ys)*Cs+delta*C+beta*Os+xs*CIs;
    IBar = PCa*4.0{dimensionless}*V*FFRT*(Ca_sr*ical_np_IBar_vv-0.341{dimensionless}*Cao)/(ical_np_IBar_vv-1.0{dimensionless});
    ICaL = IBar*(O+Os);
    ode(O, time) = -(beta+delta+y)*O+alpha*C+theta*Os+x*OI;
    ode(OI, time) = -(beta+delta1+x)*OI+y*O+theta1*OIs+alpha*CI;
    ode(OIs, time) = -(beta+theta1+xs)*OIs+ys*Os+delta1*OI+alpha*CIs;
    ode(Os, time) = -(beta+theta+ys)*Os+delta*O+alpha*Cs+xs*OIs;
    PCa = 0.0001552{cm_per_s}*(1.0{dimensionless}+0.4{dimensionless}*f_ical);
    ac_inf = 1.0{dimensionless}/((1.0{dimensionless}+exp((13.56{mV}-V)/9.45{mV}))*(1.0{dimensionless}+exp((25.0{mV}+V)/(-5.0{mV}))));
    ac_tau = 0.59{ms}+0.8{ms}*exp(0.052{per_mV}*(V+13.0{mV}))/(1.0{dimensionless}+exp(0.132{per_mV}*(V+13.0{mV})));
    alpha = ac_inf/ac_tau;
    beta = (1.0{dimensionless}-ac_inf)/ac_tau;
    delta = 14.9186{mS_per_uF}/ss_cal_4;
    delta1 = theta1*(x*ys*delta)/(ical_np_delta1_y_cor*ical_np_delta1_xs_cor*theta);
    delta_tau = 5.0{dimensionless}*f_ical;
    ical_np_IBar_vv = exp(2.0{dimensionless}*V*FRT);
    ical_np_delta1_xs_cor = sel
      case abs(xs) < 1e-12{mS_per_uF}:
        1e-12{mS_per_uF};
      otherwise:
        xs;
    endsel;
    ical_np_delta1_y_cor = sel
      case abs(y) < 1e-12{mS_per_uF}:
        1e-12{mS_per_uF};
      otherwise:
        y;
    endsel;
    in_a = 1.0{dimensionless}/(70.0{dimensionless}*(1.0{dimensionless}-0.5{dimensionless}*f_ical)*(1.0{dimensionless}+exp((V+49.1{mV})/10.349{mV})));
    in_b = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+0.213{mV})/(-10.807{mV})));
    in_hi_inf = (0.001{dimensionless}+in_inf)/1.001{dimensionless};
    in_hi_tau = 1.0{ms}/(in_a+in_b/inca);
    in_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((17.5{mV}+V)/3.0{mV}));
    in_lo_inf = (0.2474{dimensionless}+in_inf)/1.2474{dimensionless};
    in_lo_tau = 1.0{ms}/(in_a+in_b/26.553{dimensionless});
    inca = 13.825{dimensionless}-(6.3836{dimensionless}-delta_tau)/ss_cal_4-3.3696{dimensionless}/ss_cal_10;
    ss_cal_10 = 1.0{dimensionless}+pow(0.012{mM}/Ca_sr, 10.0{dimensionless});
    ss_cal_4 = 1.0{dimensionless}+pow(0.0011{mM}/Ca_sr, 4.0{dimensionless});
    x = in_lo_inf/in_lo_tau;
    xs = in_hi_inf/in_hi_tau;
    y = (1.0{dimensionless}-in_lo_inf)/in_lo_tau;
    ys = (1.0{dimensionless}-in_hi_inf)/in_hi_tau;
  enddef;

  def comp iclb as
    var ECl: mV {pub: in};
    var Gbar: mS_per_cm2 {init: 0.000225};
    var IClb: uA_per_cm2 {pub: out};
    var V: mV {pub: in};
    IClb = Gbar*(V-ECl);
  enddef;

  def comp iclca as
    var Cl: mM {pub: in};
    var Clo: mM {pub: in};
    var FFRT: s4_A2_per_g_per_m2_per_mol {pub: in};
    var FRT: per_mV {pub: in};
    var IClCa: uA_per_cm2 {pub: out};
    var IClCa_bar: uA_per_cm2;
    var Irel_pure: mM_per_ms {pub: in};
    var KClCa: dimensionless;
    var PCl: cm_per_s {init: 9e-07};
    var V: mV {pub: in};
    var i2: dimensionless {init: 0.99604};
    var iclca_i2_alpha: dimensionless;
    var iclca_i2_beta: dimensionless;
    var kCaCl: mM_per_ms {init: 0.4};
    var tau: ms {init: 8.0};
    var time: ms {pub: in};
    var vexp: dimensionless;
    IClCa = IClCa_bar*KClCa*i2;
    IClCa_bar = PCl*V*FFRT*(Cl-Clo*vexp)/(1.0{dimensionless}-vexp);
    KClCa = 1.0{dimensionless}-1.0{dimensionless}/(1.0{dimensionless}+sqr(Irel_pure/kCaCl));
    ode(i2, time) = (iclca_i2_alpha/(iclca_i2_alpha+iclca_i2_beta)-i2)/tau;
    iclca_i2_alpha = 0.025{dimensionless}/(1.0{dimensionless}+exp((V+58.0{mV})/5.0{mV}));
    iclca_i2_beta = 0.2{dimensionless}/(1.0{dimensionless}+exp((V+19.0{mV})/(-9.0{mV})));
    vexp = exp(V*FRT);
  enddef;

  def comp ik1 as
    var EK: mV {pub: in};
    var Gbar: mS_per_cm2;
    var IK1: uA_per_cm2 {pub: out};
    var IK1_camk: uA_per_cm2;
    var IK1_np: uA_per_cm2;
    var Ko: mM {pub: in};
    var V: mV {pub: in};
    var f_ik1: dimensionless {pub: in};
    var ik1_IK1_np_alpha: dimensionless;
    var ik1_IK1_np_beta: dimensionless;
    var ik1_IK1_np_vv: mV;
    Gbar = 0.5{mS_per_cm2}*sqrt(Ko/5.4{mM});
    IK1 = (1.0{dimensionless}-f_ik1)*IK1_np+f_ik1*IK1_camk;
    IK1_camk = IK1_np*1.2{dimensionless};
    IK1_np = Gbar*(ik1_IK1_np_alpha/(ik1_IK1_np_alpha+ik1_IK1_np_beta))*ik1_IK1_np_vv;
    ik1_IK1_np_alpha = 1.02{dimensionless}/(1.0{dimensionless}+exp(0.2385{per_mV}*(ik1_IK1_np_vv-59.215{mV})));
    ik1_IK1_np_beta = (0.49124{dimensionless}*exp(0.08032{per_mV}*(ik1_IK1_np_vv+5.476{mV}))+exp(0.06175{per_mV}*(ik1_IK1_np_vv-594.31{mV})))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(ik1_IK1_np_vv+4.753{mV})));
    ik1_IK1_np_vv = V-EK;
  enddef;

  def comp ikr as
    var EK: mV {pub: in};
    var GKr: mS_per_cm2;
    var IKr: uA_per_cm2 {pub: out};
    var Ko: mM {pub: in};
    var V: mV {pub: in};
    var ac: dimensionless {init: 1.23059999999999995e-08};
    var ikr_ac_tau: ms;
    var inf: dimensionless;
    var inx: dimensionless;
    var time: ms {pub: in};
    GKr = 0.0138542{mS_per_cm2}*sqrt(Ko/5.4{mM});
    IKr = GKr*ac*inx*(V-EK);
    ode(ac, time) = (inf-ac)/ikr_ac_tau;
    ikr_ac_tau = 1.0{ms}/(0.0006{per_mV}*(V-1.7384{mV})/(1.0{dimensionless}-exp(-0.136{per_mV}*(V-1.7384{mV})))-0.0003{per_mV}*(V+38.3608{mV})/(1.0{dimensionless}-exp(0.1522{per_mV}*(V+38.3608{mV}))));
    inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+10.085{mV})/(-4.25{mV})));
    inx = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+10.0{mV})/15.4{mV}));
  enddef;

  def comp iks as
    var Ca: mM {pub: in};
    var EKs: mV {pub: in};
    var G: mS_per_cm2;
    var IKs: uA_per_cm2 {pub: out};
    var IKs_arn: uM {pub: in};
    var IKs_np: uA_per_cm2;
    var IKs_pka: uA_per_cm2;
    var IKs_tot: uM {pub: in};
    var V: mV {pub: in};
    var f_hat: dimensionless;
    var fp_iks: dimensionless {pub: in};
    var iks_f_hat_ratio: dimensionless;
    var iks_f_hat_val: dimensionless;
    var iks_np_O1: dimensionless {pub: in};
    var iks_np_O2: dimensionless {pub: in};
    var iks_pka_O1: dimensionless {pub: in};
    var iks_pka_O2: dimensionless {pub: in};
    G = 0.19561{mS_per_cm2}*(1.0{dimensionless}+0.6{dimensionless}/(1.0{dimensionless}+pow(3.8e-05{mM}/Ca, 1.4{dimensionless})));
    IKs = f_hat*IKs_pka+(1.0{dimensionless}-f_hat)*IKs_np;
    IKs_np = G*(iks_np_O1+iks_np_O2)*(V-EKs);
    IKs_pka = G*(iks_pka_O1+iks_pka_O2)*(V-EKs);
    f_hat = sel
      case iks_f_hat_val < 0.0{dimensionless}:
        0.0{dimensionless};
      otherwise:
        iks_f_hat_val;
    endsel;
    iks_f_hat_ratio = 0.0306{dimensionless}+IKs_arn/IKs_tot;
    iks_f_hat_val = (fp_iks-iks_f_hat_ratio)/(0.785{dimensionless}-iks_f_hat_ratio);
  enddef;

  def comp iks_np as
    var C1: dimensionless {init: 0.91141};
    var C10: dimensionless {init: 5.36959999999999959e-07};
    var C11: dimensionless {init: 2.48610000000000001e-08};
    var C12: dimensionless {init: 2.87759999999999997e-10};
    var C13: dimensionless {init: 1.12169999999999999e-10};
    var C14: dimensionless {init: 2.59670000000000003e-12};
    var C15: dimensionless {init: 8.78740000000000076e-15};
    var C2: dimensionless {init: 0.084395};
    var C3: dimensionless {init: 0.0029306};
    var C4: dimensionless {init: 4.52285000000000024e-05};
    var C5: dimensionless {init: 2.61750000000000024e-07};
    var C6: dimensionless {init: 0.0011424};
    var C7: dimensionless {init: 7.93370000000000029e-05};
    var C8: dimensionless {init: 1.83659999999999992e-06};
    var C9: dimensionless {init: 1.41719999999999995e-08};
    var FRT: per_mV {pub: in};
    var O1: dimensionless {pub: out, init: 9.37220000000000071e-16};
    var O2: dimensionless {pub: out, init: 1.65950000000000014e-17};
    var V: mV {pub: in};
    var a: mS_per_uF;
    var b: mS_per_uF;
    var d: mS_per_uF;
    var e: mS_per_uF;
    var g: mS_per_uF;
    var o: mS_per_uF;
    var p: mS_per_uF;
    var t: mS_per_uF {init: 0.0027304};
    var time: ms {pub: in};
    ode(C1, time) = b*C2-C1*(4.0{dimensionless}*a);
    ode(C10, time) = b*C11+g*C7-C10*(2.0{dimensionless}*a+2.0{dimensionless}*d);
    ode(C11, time) = 2.0{dimensionless}*a*C10+2.0{dimensionless}*b*C12+2.0{dimensionless}*g*C8+3.0{dimensionless}*d*C13-C11*(a+b+g+2.0{dimensionless}*d);
    ode(C12, time) = a*C11+3.0{dimensionless}*g*C9+3.0{dimensionless}*d*C14-C12*(2.0{dimensionless}*b+2.0{dimensionless}*g+2.0{dimensionless}*d);
    ode(C13, time) = b*C14+g*C11-C13*(a+3.0{dimensionless}*d);
    ode(C14, time) = a*C13+2.0{dimensionless}*g*C12+4.0{dimensionless}*d*C15-C14*(b+g+3.0{dimensionless}*d);
    ode(C15, time) = g*C14-C15*(4.0{dimensionless}*d+t)+e*O1;
    ode(C2, time) = 4.0{dimensionless}*a*C1+2.0{dimensionless}*b*C3+d*C6-C2*(3.0{dimensionless}*a+b+g);
    ode(C3, time) = 3.0{dimensionless}*a*C2+3.0{dimensionless}*b*C4+d*C7-C3*(2.0{dimensionless}*a+2.0{dimensionless}*b+2.0{dimensionless}*g);
    ode(C4, time) = 2.0{dimensionless}*a*C3+4.0{dimensionless}*b*C5+d*C8-C4*(a+3.0{dimensionless}*b+3.0{dimensionless}*g);
    ode(C5, time) = a*C4+d*C9-C5*(4.0{dimensionless}*b+4.0{dimensionless}*g);
    ode(C6, time) = b*C7+g*C2-C6*(3.0{dimensionless}*a+d);
    ode(C7, time) = 3.0{dimensionless}*a*C6+2.0{dimensionless}*b*C8+2.0{dimensionless}*g*C3+2.0{dimensionless}*d*C10-C7*(2.0{dimensionless}*a+b+g+d);
    ode(C8, time) = 2.0{dimensionless}*a*C7+3.0{dimensionless}*b*C9+3.0{dimensionless}*g*C4+2.0{dimensionless}*d*C11-C8*(a+2.0{dimensionless}*b+2.0{dimensionless}*g+d);
    ode(C9, time) = a*C8+4.0{dimensionless}*g*C5+2.0{dimensionless}*d*C12-C9*(3.0{dimensionless}*b+3.0{dimensionless}*g+d);
    ode(O1, time) = -(e+p)*O1+o*O2+t*C15;
    ode(O2, time) = p*O1-o*O2;
    a = 0.007399{mS_per_uF}/(1.0{dimensionless}+exp(FRT*(V-0.031196{mV})/(-0.80019{dimensionless})));
    b = 0.0056992{mS_per_uF}/(1.0{dimensionless}+exp(FRT*(V-0.04152{mV})/1.3489{dimensionless}));
    d = 0.090654{mS_per_uF}*exp(-0.11157{dimensionless}*V*FRT);
    e = 0.0031124{mS_per_uF}+(0.02833{mS_per_uF}-0.0031124{mS_per_uF})/(1.0{dimensionless}+exp(FRT*(V+0.05166{mV})/1.5522{dimensionless}));
    g = 0.38839{mS_per_uF}/(1.0{dimensionless}+exp(FRT*(V+0.15019{mV})/(-0.60693{dimensionless})));
    o = 4.41980000000000020e-04{mS_per_uF}*exp(-1.2022{dimensionless}*V*FRT);
    p = 4.01729999999999991e-04{mS_per_uF}*exp(2.08729999999999989e-04{dimensionless}*V*FRT);
  enddef;

  def comp iks_pka as
    var C1: dimensionless {init: 0.95624};
    var C10: dimensionless {init: 3.19559999999999984e-07};
    var C11: dimensionless {init: 7.039e-09};
    var C12: dimensionless {init: 3.87629999999999971e-11};
    var C13: dimensionless {init: 5.02769999999999999e-11};
    var C14: dimensionless {init: 5.53740000000000021e-13};
    var C15: dimensionless {init: 2.96639999999999984e-15};
    var C2: dimensionless {init: 0.042127};
    var C3: dimensionless {init: 6.95969999999999965e-04};
    var C4: dimensionless {init: 5.11010000000000042e-06};
    var C5: dimensionless {init: 1.407e-08};
    var C6: dimensionless {init: 9.02690000000000046e-04};
    var C7: dimensionless {init: 2.98259999999999987e-05};
    var C8: dimensionless {init: 3.285e-07};
    var C9: dimensionless {init: 1.206e-09};
    var FRT: per_mV {pub: in};
    var O1: dimensionless {pub: out, init: 1.12010000000000000e-15};
    var O2: dimensionless {pub: out, init: 1.66129999999999997e-18};
    var V: mV {pub: in};
    var a: mS_per_uF;
    var b: mS_per_uF;
    var d: mS_per_uF;
    var e: mS_per_uF;
    var g: mS_per_uF;
    var o: mS_per_uF;
    var p: mS_per_uF;
    var t: mS_per_uF {init: 0.0046171};
    var time: ms {pub: in};
    ode(C1, time) = b*C2-C1*(4.0{dimensionless}*a);
    ode(C10, time) = b*C11+g*C7-C10*(2.0{dimensionless}*a+2.0{dimensionless}*d);
    ode(C11, time) = 2.0{dimensionless}*a*C10+2.0{dimensionless}*b*C12+2.0{dimensionless}*g*C8+3.0{dimensionless}*d*C13-C11*(a+b+g+2.0{dimensionless}*d);
    ode(C12, time) = a*C11+3.0{dimensionless}*g*C9+3.0{dimensionless}*d*C14-C12*(2.0{dimensionless}*b+2.0{dimensionless}*g+2.0{dimensionless}*d);
    ode(C13, time) = b*C14+g*C11-C13*(a+3.0{dimensionless}*d);
    ode(C14, time) = a*C13+2.0{dimensionless}*g*C12+4.0{dimensionless}*d*C15-C14*(b+g+3.0{dimensionless}*d);
    ode(C15, time) = g*C14-C15*(4.0{dimensionless}*d+t)+e*O1;
    ode(C2, time) = 4.0{dimensionless}*a*C1+2.0{dimensionless}*b*C3+d*C6-C2*(3.0{dimensionless}*a+b+g);
    ode(C3, time) = 3.0{dimensionless}*a*C2+3.0{dimensionless}*b*C4+d*C7-C3*(2.0{dimensionless}*a+2.0{dimensionless}*b+2.0{dimensionless}*g);
    ode(C4, time) = 2.0{dimensionless}*a*C3+4.0{dimensionless}*b*C5+d*C8-C4*(a+3.0{dimensionless}*b+3.0{dimensionless}*g);
    ode(C5, time) = a*C4+d*C9-C5*(4.0{dimensionless}*b+4.0{dimensionless}*g);
    ode(C6, time) = b*C7+g*C2-C6*(3.0{dimensionless}*a+d);
    ode(C7, time) = 3.0{dimensionless}*a*C6+2.0{dimensionless}*b*C8+2.0{dimensionless}*g*C3+2.0{dimensionless}*d*C10-C7*(2.0{dimensionless}*a+b+g+d);
    ode(C8, time) = 2.0{dimensionless}*a*C7+3.0{dimensionless}*b*C9+3.0{dimensionless}*g*C4+2.0{dimensionless}*d*C11-C8*(a+2.0{dimensionless}*b+2.0{dimensionless}*g+d);
    ode(C9, time) = a*C8+4.0{dimensionless}*g*C5+2.0{dimensionless}*d*C12-C9*(3.0{dimensionless}*b+3.0{dimensionless}*g+d);
    ode(O1, time) = -(e+p)*O1+o*O2+t*C15;
    ode(O2, time) = p*O1-o*O2;
    a = 0.0099415{mS_per_uF}/(1.0{dimensionless}+exp(FRT*(V-0.044809{mV})/(-0.58172{dimensionless})));
    b = 0.0033201{mS_per_uF}/(1.0{dimensionless}+exp(FRT*(V-0.094217{mV})/0.95364{dimensionless}));
    d = 0.0657{mS_per_uF}*exp(-0.11899{dimensionless}*V*FRT);
    e = 3.85250000000000013e-04{mS_per_uF}+(0.012406{mS_per_uF}-3.85250000000000013e-04{mS_per_uF})/(1.0{dimensionless}+exp(FRT*(V+0.064118{mV})/0.77992{dimensionless}));
    g = 0.56356{mS_per_uF}/(1.0{dimensionless}+exp(FRT*(V+0.17986{mV})/(-0.58381{dimensionless})));
    o = 0.0002373{mS_per_uF}*exp(-1.9742{dimensionless}*V*FRT);
    p = 2.26519999999999993e-04{mS_per_uF}*exp(2.46889999999999989e-04{dimensionless}*V*FRT);
  enddef;

  def comp iks_sig as
    var IKs_arn: uM {pub: out};
    var IKs_arp: uM;
    var IKs_tot: uM {pub: out, init: 0.025};
    var IKsf: uM;
    var IKsp: uM {init: 7.65988420110534033e-04};
    var K: uM {init: 0.01};
    var Ka_iks: uM {init: 9.97940000000000003e-05};
    var Kp_iks: uM {init: 1.11470000000000002e-04};
    var L: uM {init: 0.0001};
    var M: uM {init: 0.01};
    var PKA_eca: uM {pub: in};
    var PKAf: uM;
    var PP1_eca: uM {pub: in};
    var PP1f_eca: uM;
    var Yotiao: uM {init: 0.025};
    var Yotiaof: uM;
    var fp_iks: dimensionless {pub: out};
    var iks_sig_IKsf_sum: dimensionless;
    var iks_sig_IKsp_dif: uM;
    var iks_sig_PKAf_sum: dimensionless;
    var iks_sig_PP1f_eca_sum: dimensionless;
    var ka_iks: hertz {init: 0.16305};
    var kp_iks: hertz {init: 1.0542};
    var pka_eca_C: uM {pub: in};
    var time: ms {pub: in};
    IKs_arn = IKsf*Yotiaof*PKAf/(L*M);
    IKs_arp = IKs_arn*PP1f_eca/K;
    IKsf = L/2.0{dimensionless}*(sqrt(sqr(iks_sig_IKsf_sum)+4.0{dimensionless}*IKs_tot/L)-iks_sig_IKsf_sum);
    ode(IKsp, time) = 0.001{dimensionless_times_1e3}*(ka_iks*pka_eca_C*iks_sig_IKsp_dif/(Ka_iks+iks_sig_IKsp_dif)-kp_iks*PP1_eca*IKsp/(Kp_iks+IKsp));
    PKAf = M/2.0{dimensionless}*(sqrt(sqr(iks_sig_PKAf_sum)+4.0{dimensionless}*PKA_eca/M)-iks_sig_PKAf_sum);
    PP1f_eca = K/2.0{dimensionless}*(sqrt(sqr(iks_sig_PP1f_eca_sum)+4.0{dimensionless}*PP1_eca/K)-iks_sig_PP1f_eca_sum);
    Yotiaof = (Yotiao-IKs_tot+IKsf)/((1.0{dimensionless}+PP1f_eca/K)*(1.0{dimensionless}+PKAf/M));
    fp_iks = (IKsp+IKs_arn)/IKs_tot;
    iks_sig_IKsf_sum = 1.0{dimensionless}+(Yotiao-IKs_tot)/L;
    iks_sig_IKsp_dif = IKs_arp-IKsp;
    iks_sig_PKAf_sum = 1.0{dimensionless}+(Yotiao-PKA_eca)/M;
    iks_sig_PP1f_eca_sum = 1.0{dimensionless}+(Yotiao-PP1_eca)/K;
  enddef;

  def comp ikur as
    var EK: mV {pub: in};
    var IKur: uA_per_cm2 {pub: out};
    var IKur_np: uA_per_cm2;
    var IKur_p: uA_per_cm2;
    var Ka_ikur: uM {init: 0.27623};
    var Kp_ikur: uM {init: 0.002331};
    var PP1_eca: uM {pub: in};
    var V: mV {pub: in};
    var f_ikur: dimensionless {init: 5.89379755147717982e-02};
    var fhat: dimensionless;
    var gbar_np: mS_per_cm2 {init: 0.00384};
    var ikur_fhat_val: dimensionless;
    var ka_ikur: hertz {init: 0.069537};
    var kp_ikur: hertz {init: 0.317};
    var pka_eca_C: uM {pub: in};
    var time: ms {pub: in};
    IKur = (1.0{dimensionless}-fhat)*IKur_np+fhat*IKur_p;
    IKur_np = gbar_np*(V-EK)/(1.0{dimensionless}+exp((15.0{mV}-V)/17.0{mV}));
    IKur_p = gbar_np*(V-EK)/(1.0{dimensionless}+exp((36.0{mV}-V)/17.0{mV}))*3.62{dimensionless};
    ode(f_ikur, time) = 0.001{dimensionless_times_1e3}*(ka_ikur*pka_eca_C*(1.0{dimensionless}-f_ikur)/(Ka_ikur+(1.0{dimensionless}-f_ikur)*1.0{uM})-kp_ikur*PP1_eca*f_ikur/(Kp_ikur+f_ikur*1.0{uM}));
    fhat = sel
      case ikur_fhat_val < 0.0{dimensionless}:
        0.0{dimensionless};
      otherwise:
        ikur_fhat_val;
    endsel;
    ikur_fhat_val = (f_ikur-5.89379800000000009e-02{dimensionless})/(0.393747{dimensionless}-5.89379800000000009e-02{dimensionless});
  enddef;

  def comp ina as
    var ENa: mV {pub: in};
    var INa: uA_per_cm2 {pub: out};
    var INa_both: uA_per_cm2;
    var INa_camk: uA_per_cm2;
    var INa_np: uA_per_cm2;
    var INa_pka: uA_per_cm2;
    var Ka_ina: uM {init: 0.10988};
    var Kp_ina: uM {init: 7.8605};
    var PP1_cav: uM {pub: in};
    var V: mV {pub: in};
    var camk_f_ina: dimensionless {pub: in};
    var f_both: dimensionless;
    var f_camk_only: dimensionless;
    var f_ina: dimensionless {init: 2.39479458960527997e-01};
    var f_np: dimensionless;
    var f_pka: dimensionless;
    var f_pka_only: dimensionless;
    var gNaBar: mS_per_cm2;
    var ina_camk_h: dimensionless {pub: in};
    var ina_camk_j: dimensionless {pub: in};
    var ina_camk_m: dimensionless {pub: in};
    var ina_f_pka_val: dimensionless;
    var ina_np_h: dimensionless {pub: in};
    var ina_np_j: dimensionless {pub: in};
    var ina_np_m: dimensionless {pub: in};
    var ina_pka_h: dimensionless {pub: in};
    var ina_pka_j: dimensionless {pub: in};
    var ina_pka_m: dimensionless {pub: in};
    var ka_ina: hertz {init: 0.01368};
    var kp_ina: hertz {init: 0.052811};
    var pka_cav_C: uM {pub: in};
    var time: ms {pub: in};
    INa = f_np*INa_np+f_pka_only*INa_pka+f_camk_only*INa_camk+f_both*INa_both;
    INa_both = gNaBar*pow(ina_pka_m, 3.0{dimensionless})*ina_camk_h*ina_camk_j*(V-ENa);
    INa_camk = gNaBar*pow(ina_camk_m, 3.0{dimensionless})*ina_camk_h*ina_camk_j*(V-ENa);
    INa_np = gNaBar*pow(ina_np_m, 3.0{dimensionless})*ina_np_h*ina_np_j*(V-ENa);
    INa_pka = gNaBar*pow(ina_pka_m, 3.0{dimensionless})*ina_pka_h*ina_pka_j*(V-ENa)*1.25{dimensionless};
    f_both = f_pka*camk_f_ina;
    f_camk_only = camk_f_ina-f_both;
    ode(f_ina, time) = 0.001{dimensionless_times_1e3}*(ka_ina*pka_cav_C*(1.0{dimensionless}-f_ina)/(Ka_ina+(1.0{dimensionless}-f_ina)*1.0{uM})-kp_ina*PP1_cav*f_ina/(Kp_ina+f_ina*1.0{uM}));
    f_np = 1.0{dimensionless}-f_pka_only-f_camk_only-f_both;
    f_pka = sel
      case ina_f_pka_val < 0.0{dimensionless}:
        0.0{dimensionless};
      otherwise:
        ina_f_pka_val;
    endsel;
    f_pka_only = f_pka-f_both;
    gNaBar = 2.15{dimensionless}*8.25{dimensionless}*1.1{mS_per_cm2};
    ina_f_pka_val = (f_ina-0.2394795{dimensionless})/(0.9501431{dimensionless}-0.2394795{dimensionless});
  enddef;

  def comp ina_camk as
    var V: mV {pub: in};
    var dVIn: mV {init: 3.25};
    var h: dimensionless {pub: out, init: 0.83805};
    var ina_camk_h_alpha: mS_per_uF;
    var ina_camk_h_beta: mS_per_uF;
    var ina_camk_j_alpha: mS_per_uF;
    var ina_camk_j_beta: mS_per_uF;
    var ina_camk_m_alpha: mS_per_uF;
    var ina_camk_m_beta: mS_per_uF;
    var j: dimensionless {pub: out, init: 0.99281};
    var m: dimensionless {pub: out, init: 6.81269999999999988e-04};
    var time: ms {pub: in};
    ode(h, time) = ina_camk_h_alpha*(1.0{dimensionless}-h)-ina_camk_h_beta*h;
    ina_camk_h_alpha = sel
      case V+dVIn >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        0.135{mS_per_uF}*exp((87.0{mV}+V+dVIn)/(-6.8{mV}));
    endsel;
    ina_camk_h_beta = sel
      case V+dVIn >= -40.0{mV}:
        1.0{mS_per_uF}/(0.13{dimensionless}*(1.0{dimensionless}+exp((V+dVIn+27.4034{mV})/(-11.1{mV}))));
      otherwise:
        3.56{mS_per_uF}*exp(0.079{per_mV}*(V+dVIn+7.0{mV}))+310000.0{mS_per_uF}*exp(0.35{per_mV}*(V+dVIn+7.0{mV}));
    endsel;
    ina_camk_j_alpha = sel
      case V+dVIn >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        (-127140.0{per_mV_per_ms}*exp(0.2444{per_mV}*(V+dVIn))+(-6.948e-05{per_mV_per_ms}*exp(-0.04391{per_mV}*(V+dVIn))))*(V+dVIn+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+dVIn+79.23{mV})));
    endsel;
    ina_camk_j_beta = sel
      case V+dVIn >= -40.0{mV}:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*(V+dVIn))/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+dVIn+32.0{mV})));
      otherwise:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*(V+dVIn))/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+dVIn+40.14{mV})));
    endsel;
    ina_camk_m_alpha = 0.32{per_mV_per_ms}*(V+58.4729{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+58.4729{mV})));
    ina_camk_m_beta = 0.08{mS_per_uF}*exp((13.7299{mV}-V)/11.0{mV});
    ode(j, time) = ina_camk_j_alpha*(1.0{dimensionless}-j)-ina_camk_j_beta*j;
    ode(m, time) = ina_camk_m_alpha*(1.0{dimensionless}-m)-ina_camk_m_beta*m;
  enddef;

  def comp ina_np as
    var V: mV {pub: in};
    var h: dimensionless {pub: out, init: 0.0068172};
    var ina_np_h_alpha: mS_per_uF;
    var ina_np_h_beta: mS_per_uF;
    var ina_np_j_alpha: mS_per_uF;
    var ina_np_j_beta: mS_per_uF;
    var ina_np_m_alpha: mS_per_uF;
    var ina_np_m_beta: mS_per_uF;
    var j: dimensionless {pub: out, init: 0.99709};
    var m: dimensionless {pub: out, init: 0.90163};
    var time: ms {pub: in};
    ode(h, time) = ina_np_h_alpha*(1.0{dimensionless}-h)-ina_np_h_beta*h;
    ina_np_h_alpha = sel
      case V >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        0.135{mS_per_uF}*exp((87.0{mV}+V)/(-6.8{mV}));
    endsel;
    ina_np_h_beta = sel
      case V >= -40.0{mV}:
        1.0{mS_per_uF}/(0.13{dimensionless}*(1.0{dimensionless}+exp((V+27.4034{mV})/(-11.1{mV}))));
      otherwise:
        3.56{mS_per_uF}*exp(0.079{per_mV}*(V+7.0{mV}))+310000.0{mS_per_uF}*exp(0.35{per_mV}*(V+7.0{mV}));
    endsel;
    ina_np_j_alpha = sel
      case V >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        (-127140.0{per_mV_per_ms}*exp(0.2444{per_mV}*V)-6.948e-05{per_mV_per_ms}*exp(-0.04391{per_mV}*V))*(V+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
    endsel;
    ina_np_j_beta = sel
      case V >= -40.0{mV}:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*V)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+32.0{mV})));
      otherwise:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*V)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
    endsel;
    ina_np_m_alpha = 0.32{per_mV_per_ms}*(V+58.4729{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+58.4729{mV})));
    ina_np_m_beta = 0.08{mS_per_uF}*exp((13.7299{mV}-V)/11.0{mV});
    ode(j, time) = ina_np_j_alpha*(1.0{dimensionless}-j)-ina_np_j_beta*j;
    ode(m, time) = ina_np_m_alpha*(1.0{dimensionless}-m)-ina_np_m_beta*m;
  enddef;

  def comp ina_pka as
    var V: mV {pub: in};
    var dVAc: mV {init: 3.7};
    var dVIn: mV {init: 4.9};
    var h: dimensionless {pub: out, init: 0.001236};
    var ina_pka_h_alpha: mS_per_uF;
    var ina_pka_h_beta: mS_per_uF;
    var ina_pka_j_alpha: mS_per_uF;
    var ina_pka_j_beta: mS_per_uF;
    var ina_pka_m_alpha: mS_per_uF;
    var ina_pka_m_beta: mS_per_uF;
    var j: dimensionless {pub: out, init: 0.99123};
    var m: dimensionless {pub: out, init: 0.79472};
    var time: ms {pub: in};
    ode(h, time) = ina_pka_h_alpha*(1.0{dimensionless}-h)-ina_pka_h_beta*h;
    ina_pka_h_alpha = sel
      case V >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        0.135{mS_per_uF}*exp((87.0{mV}+V+dVIn)/(-6.8{mV}));
    endsel;
    ina_pka_h_beta = sel
      case V >= -40.0{mV}:
        1.0{dimensionless}/0.13{ms}/(1.0{dimensionless}+exp((V+dVIn+27.4034{mV})/(-11.1{mV})));
      otherwise:
        3.56{mS_per_uF}*exp(0.079{per_mV}*(V+dVIn+7.0{mV}))+310000.0{mS_per_uF}*exp(0.35{per_mV}*(V+dVIn+7.0{mV}));
    endsel;
    ina_pka_j_alpha = sel
      case V >= -40.0{mV}:
        0.0{mS_per_uF};
      otherwise:
        (-127140.0{per_mV_per_ms}*exp(0.2444{per_mV}*(V+dVIn))-6.948e-05{per_mV_per_ms}*exp(-0.04391{per_mV}*(V+dVIn)))*(V+dVIn+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V+dVIn+79.23{mV})));
    endsel;
    ina_pka_j_beta = sel
      case V >= -40.0{mV}:
        0.3{mS_per_uF}*exp(-2.535e-07{per_mV}*(V+dVIn))/(1.0{dimensionless}+exp(-0.1{per_mV}*(V+dVIn+32.0{mV})));
      otherwise:
        0.1212{mS_per_uF}*exp(-0.01052{per_mV}*(V+dVIn))/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V+dVIn+40.14{mV})));
    endsel;
    ina_pka_m_alpha = 0.32{per_mV_per_ms}*(V+dVAc+58.4729{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+dVAc+58.4729{mV})));
    ina_pka_m_beta = 0.08{mS_per_uF}*exp((V+dVAc-13.7299{mV})/(-11.0{mV}));
    ode(j, time) = ina_pka_j_alpha*(1.0{dimensionless}-j)-ina_pka_j_beta*j;
    ode(m, time) = ina_pka_m_alpha*(1.0{dimensionless}-m)-ina_pka_m_beta*m;
  enddef;

  def comp inab as
    var F: C_per_mol {pub: in};
    var FRT: per_mV {pub: in};
    var INab: uA_per_cm2 {pub: out};
    var Na: mM {pub: in};
    var Nao: mM {pub: in};
    var P: cm_per_s {init: 3.2e-09};
    var V: mV {pub: in};
    var ePhi: dimensionless;
    var inab_INab_phi: dimensionless;
    INab = P*F*inab_INab_phi*(Na*ePhi-Nao)/(ePhi-1.0{dimensionless});
    ePhi = exp(inab_INab_phi);
    inab_INab_phi = V*FRT;
  enddef;

  def comp inaca as
    var Ca: mM {pub: in};
    var Ca_sr: mM {pub: in};
    var Cao: mM {pub: in};
    var FRT: per_mV {pub: in};
    var INaCa: uA_per_cm2 {pub: out};
    var INaCaSR: uA_per_cm2 {pub: out};
    var KmNai3: mM3;
    var KmNao3: mM3;
    var Km_Ca: mM {init: 0.000125};
    var Km_Cai: mM {init: 0.0036};
    var Km_Cao: mM {init: 1.3};
    var Km_Nai: mM {init: 12.3};
    var Km_Nao: mM {init: 87.5};
    var Na: mM {pub: in};
    var Na_i3: mM3;
    var Na_o3: mM3;
    var Na_sr: mM {pub: in};
    var Na_ss3: mM3;
    var Nao: mM {pub: in};
    var V: mV {pub: in};
    var eta: dimensionless {init: 0.27};
    var exp1: dimensionless;
    var exp2: dimensionless;
    var inaca_INaCaSR_denom1: dimensionless;
    var inaca_INaCaSR_denom2: dimensionless;
    var inaca_INaCaSR_denom3: mol4_per_m12;
    var inaca_INaCaSR_denom4: mol4_per_m12;
    var inaca_INaCaSR_num: A_mol4_per_m14_times_1e_minus_2;
    var inaca_INaCa_denom1: dimensionless;
    var inaca_INaCa_denom2: dimensionless;
    var inaca_INaCa_denom3: mol4_per_m12;
    var inaca_INaCa_denom4: mol4_per_m12;
    var inaca_INaCa_num: A_mol4_per_m14_times_1e_minus_2;
    var kSat: dimensionless {init: 0.32};
    var vMax: uA_per_cm2 {init: 4.5};
    INaCa = inaca_INaCa_num/(inaca_INaCa_denom1*inaca_INaCa_denom2*(inaca_INaCa_denom3+inaca_INaCa_denom4));
    INaCaSR = inaca_INaCaSR_num/(inaca_INaCaSR_denom1*inaca_INaCaSR_denom2*(inaca_INaCaSR_denom3+inaca_INaCaSR_denom4));
    KmNai3 = pow(Km_Nai, 3.0{dimensionless});
    KmNao3 = pow(Km_Nao, 3.0{dimensionless});
    Na_i3 = pow(Na, 3.0{dimensionless});
    Na_o3 = pow(Nao, 3.0{dimensionless});
    Na_ss3 = pow(Na_sr, 3.0{dimensionless});
    exp1 = exp(eta*V*FRT);
    exp2 = exp((eta-1.0{dimensionless})*V*FRT);
    inaca_INaCaSR_denom1 = 1.0{dimensionless}+sqr(Km_Ca/Ca_sr);
    inaca_INaCaSR_denom2 = 1.0{dimensionless}+kSat*exp2;
    inaca_INaCaSR_denom3 = Km_Cao*Na_ss3+KmNao3*Ca_sr+KmNai3*Cao*(1.0{dimensionless}+Ca_sr/Km_Cai);
    inaca_INaCaSR_denom4 = Km_Cai*Na_o3*(1.0{dimensionless}+Na_ss3/KmNai3)+Na_ss3*Cao+Na_o3*Ca_sr;
    inaca_INaCaSR_num = 0.2{dimensionless}*vMax*(Na_ss3*Cao*exp1-Na_o3*Ca_sr*exp2);
    inaca_INaCa_denom1 = 1.0{dimensionless}+sqr(Km_Ca/Ca);
    inaca_INaCa_denom2 = 1.0{dimensionless}+kSat*exp2;
    inaca_INaCa_denom3 = Km_Cao*Na_i3+KmNao3*Ca+KmNai3*Cao*(1.0{dimensionless}+Ca/Km_Cai);
    inaca_INaCa_denom4 = Km_Cai*Na_o3*(1.0{dimensionless}+Na_i3/KmNai3)+Na_i3*Cao+Na_o3*Ca;
    inaca_INaCa_num = 0.8{dimensionless}*vMax*(Na_i3*Cao*exp1-Na_o3*Ca*exp2);
  enddef;

  def comp inak as
    var FRT: per_mV {pub: in};
    var INaK: uA_per_cm2 {pub: out};
    var INaK_np: uA_per_cm2;
    var INaK_p: uA_per_cm2;
    var Ka_inak: uM {init: 0.0011001};
    var Ko: mM {pub: in};
    var Kp_inak: uM {init: 5.7392};
    var Na: mM {pub: in};
    var PP1_cav: uM {pub: in};
    var V: mV {pub: in};
    var f_inak: dimensionless {init: 1.26345311579565994e-01};
    var fhat: dimensionless;
    var ibar: uA_per_cm2 {init: 1.4};
    var inak_fhat_val: dimensionless;
    var ka_inak: hertz {init: 0.015265};
    var km_ko: mM {init: 1.5};
    var km_np: mM {init: 2.6};
    var km_p: mM {init: 1.846};
    var kp_inak: hertz {init: 0.092455};
    var phi: uA_per_cm2;
    var pk: dimensionless;
    var pka_cav_C: uM {pub: in};
    var time: ms {pub: in};
    INaK = (1.0{dimensionless}-fhat)*INaK_np+fhat*INaK_p;
    INaK_np = phi*pow(Na/(Na+km_np), 3.0{dimensionless});
    INaK_p = phi*pow(Na/(Na+km_p), 3.0{dimensionless});
    ode(f_inak, time) = 0.001{dimensionless_times_1e3}*(ka_inak*pka_cav_C*(1.0{dimensionless}-f_inak)/(Ka_inak+(1.0{dimensionless}-f_inak)*1.0{uM})-kp_inak*PP1_cav*f_inak/(Kp_inak+f_inak*1.0{uM}));
    fhat = sel
      case inak_fhat_val < 0.0{dimensionless}:
        0.0{dimensionless};
      otherwise:
        inak_fhat_val;
    endsel;
    inak_fhat_val = (f_inak-0.1263453{dimensionless})/(0.9980137{dimensionless}-0.1263453{dimensionless});
    phi = ibar*pk/(1.0{dimensionless}+exp(-(V+92.0{mV})*FRT));
    pk = Ko/(Ko+km_ko);
  enddef;

  def comp inal as
    var ENa: mV {pub: in};
    var INaL: uA_per_cm2 {pub: out};
    var INaL_camk: uA_per_cm2;
    var INaL_np: uA_per_cm2;
    var V: mV {pub: in};
    var camk_f_ina: dimensionless {pub: in};
    var conductance: mV;
    var h: dimensionless {init: 0.36003};
    var h_inf: dimensionless;
    var inal_m_alpha: mS_per_uF;
    var inal_m_beta: mS_per_uF;
    var m: dimensionless {init: 0.0007053};
    var tau_h: ms {init: 600.0};
    var time: ms {pub: in};
    INaL = (1.0{dimensionless}-camk_f_ina)*INaL_np+camk_f_ina*INaL_camk;
    INaL_camk = 0.016{mS_per_cm2}*conductance;
    INaL_np = 0.0065{mS_per_cm2}*conductance;
    conductance = pow(m, 3.0{dimensionless})*h*(V-ENa);
    ode(h, time) = (h_inf-h)/tau_h;
    h_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+91.0{mV})/6.1{mV}));
    inal_m_alpha = 0.32{per_mV_per_ms}*(V+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    inal_m_beta = 0.08{mS_per_uF}*exp(V/(-11.0{mV}));
    ode(m, time) = inal_m_alpha*(1.0{dimensionless}-m)-inal_m_beta*m;
  enddef;

  def comp ipca as
    var Ca: mM {pub: in};
    var IpCa: uA_per_cm2 {pub: out};
    var IpCa_bar: uA_per_cm2 {init: 0.0575};
    var Km_pCa: mM {init: 0.0005};
    IpCa = IpCa_bar*Ca/(Km_pCa+Ca);
  enddef;

  def comp irel as
    var Ca_jsr: mM {pub: in};
    var Ca_sr: mM {pub: in};
    var Ileak_ryr: mM_per_ms;
    var Ileak_ryr_np: mM_per_ms;
    var Ileak_ryr_p: mM_per_ms;
    var Irel: mM_per_ms {pub: out};
    var Irel_np: mM_per_ms {init: 3.66750000000000000e-09};
    var Irel_p: mM_per_ms {init: 7.30739999999999981e-09};
    var Irel_pure: mM_per_ms {pub: out};
    var Km_ryr_leak_np: mM {init: 20.0};
    var Km_ryr_leak_p: mM {init: 1.1};
    var RyR_arn: uM {pub: in};
    var RyR_tot: uM {pub: in};
    var alpha_np: mM_per_ms;
    var alpha_p: mM_per_ms;
    var beta_0: ms;
    var beta_np: ms;
    var beta_p: ms;
    var f_ryr: dimensionless {pub: in};
    var fhat: dimensionless;
    var fp_RyR: dimensionless {pub: in};
    var ical_ICaL: uA_per_cm2 {pub: in};
    var irel_fhat_ratio: dimensionless;
    var irel_fhat_val: dimensionless;
    var irel_inf_np: mM_per_ms;
    var irel_inf_p: mM_per_ms;
    var irel_tau_np: ms;
    var irel_tau_p: ms;
    var k_ryr_leak_np: mS_per_uF {init: 0.000175};
    var k_ryr_leak_p: mS_per_uF {init: 0.0005};
    var time: ms {pub: in};
    var x: dimensionless;
    var y: dimensionless;
    Ileak_ryr = (1.0{dimensionless}-fhat)*Ileak_ryr_np+fhat*Ileak_ryr_p;
    Ileak_ryr_np = k_ryr_leak_np*exp(Ca_jsr/Km_ryr_leak_np)*(Ca_jsr-Ca_sr);
    Ileak_ryr_p = k_ryr_leak_p*exp(Ca_jsr/Km_ryr_leak_p)*(Ca_jsr-Ca_sr);
    Irel = Ileak_ryr+Irel_pure;
    ode(Irel_np, time) = -(irel_inf_np+Irel_np)/irel_tau_np;
    ode(Irel_p, time) = -(irel_inf_p+Irel_p)/irel_tau_p;
    Irel_pure = (1.0{dimensionless}-fhat)*Irel_np+fhat*Irel_p;
    alpha_np = 0.1125{mol_per_m3_per_s2_times_1e6}*beta_np;
    alpha_p = 0.1125{mol_per_m3_per_s2_times_1e6}*beta_p;
    beta_0 = 0.6667{dimensionless}*4.75{ms};
    beta_np = beta_0*(1.0{dimensionless}+2.0{dimensionless}*f_ryr);
    beta_p = beta_0*(1.0{dimensionless}+0.0{dimensionless}*f_ryr);
    fhat = sel
      case irel_fhat_val < 0.0{dimensionless}:
        0.0{dimensionless};
      otherwise:
        irel_fhat_val;
    endsel;
    irel_fhat_ratio = 0.0329{dimensionless}+RyR_arn/RyR_tot;
    irel_fhat_val = (fp_RyR-irel_fhat_ratio)/(0.9586{dimensionless}-irel_fhat_ratio);
    irel_inf_np = alpha_np*y;
    irel_inf_p = 1.9925{dimensionless}*alpha_p*y;
    irel_tau_np = beta_np/x;
    irel_tau_p = 0.5357{dimensionless}*beta_p/x;
    x = 1.0{dimensionless}+0.0123{mM}/Ca_jsr;
    y = ical_ICaL*1.0{m2_per_A_times_1e2}/(1.0{dimensionless}+pow(1.0{mM}/Ca_jsr, 8.0{dimensionless}));
  enddef;

  def comp iso as
    var L: uM {pub: out, init: 0.0};
  enddef;

  def comp ito as
    var EK: mV {pub: in};
    var Gbar: mS_per_cm2 {init: 0.4975};
    var ITo: uA_per_cm2 {pub: out};
    var ITo_camk: uA_per_cm2;
    var ITo_np: uA_per_cm2;
    var R: dimensionless;
    var V: mV {pub: in};
    var a_inf: dimensionless;
    var a_np: dimensionless {init: 1.76869999999999985e-05};
    var a_tau: ms;
    var alph_if: dimensionless;
    var alph_is: dimensionless;
    var beta_i: mS_per_uF;
    var f_ito: dimensionless {pub: in};
    var if_camk: dimensionless {init: 1.0};
    var if_np: dimensionless {init: 0.99798};
    var is_camk: dimensionless {init: 1.0};
    var is_np: dimensionless {init: 0.98747};
    var ito_a_np_alpha: dimensionless;
    var ito_a_np_beta: dimensionless;
    var ito_if_camk_alpha: mS_per_uF;
    var ito_if_np_alpha: mS_per_uF;
    var ito_is_camk_alpha: mS_per_uF;
    var ito_is_np_alpha: mS_per_uF;
    var time: ms {pub: in};
    var x: uA_per_cm2;
    ITo = (1.0{dimensionless}-f_ito)*ITo_np+f_ito*ITo_camk;
    ITo_camk = x*(0.7356{dimensionless}*if_camk+0.2644{dimensionless}*is_camk);
    ITo_np = x*(0.7356{dimensionless}*if_np+0.2644{dimensionless}*is_np);
    R = exp(V/550.0{mV});
    a_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+9.437{mV})/(-7.133{mV})));
    ode(a_np, time) = (a_inf-a_np)/a_tau;
    a_tau = 1.0{ms}/(ito_a_np_alpha/1.2089{dimensionless}+3.5{dimensionless}*ito_a_np_beta);
    alph_if = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+58.0{mV})/5.0{mV}));
    alph_is = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+60.0{mV})/5.0{mV}))/250.0{dimensionless};
    beta_i = 1.0{mS_per_uF}/(1.0{dimensionless}+exp((V+19.0{mV})/(-9.0{mV})))/0.5{dimensionless}/9.7953{dimensionless};
    ode(if_camk, time) = ito_if_camk_alpha*(1.0{dimensionless}-if_camk)-beta_i*if_camk;
    ode(if_np, time) = ito_if_np_alpha*(1.0{dimensionless}-if_np)-beta_i*if_np;
    ode(is_camk, time) = ito_is_camk_alpha*(1.0{dimensionless}-is_camk)-beta_i*is_camk;
    ode(is_np, time) = ito_is_np_alpha*(1.0{dimensionless}-is_np)-beta_i*is_np;
    ito_a_np_alpha = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-18.4099{mV})/(-29.3814{mV})));
    ito_a_np_beta = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+100.0{mV})/29.3814{mV}));
    ito_if_camk_alpha = 0.04796{mS_per_uF}*alph_if;
    ito_if_np_alpha = 0.02144{mS_per_uF}*alph_if;
    ito_is_camk_alpha = 2.46{mS_per_uF}*alph_is;
    ito_is_np_alpha = 0.56034{mS_per_uF}*alph_is;
    x = Gbar*pow(a_np, 3.0{dimensionless})*R*(V-EK);
  enddef;

  def comp iup as
    var Ca: mM {pub: in};
    var Ca_nsr: mM {pub: in};
    var Imax: mM_per_ms;
    var Iup: mM_per_ms {pub: out};
    var Ka_plb: uM {init: 9.88539999999999992e-04};
    var Km_both: mM;
    var Km_camk: mM;
    var Km_np: mM {init: 0.00092};
    var Km_pka: mM;
    var Km_up: mM;
    var Kp_plb: uM {init: 0.80737};
    var PP1f_cyt: uM {pub: in};
    var active: dimensionless {pub: in};
    var camk_f_plb: dimensionless {pub: in};
    var f_SERCA2a: dimensionless;
    var f_both: dimensionless;
    var f_camk_only: dimensionless;
    var f_np: dimensionless;
    var f_pka: dimensionless;
    var f_pka_only: dimensionless;
    var f_plb: dimensionless {init: 5.92167467082830967e-01};
    var iup_f_pka_val: dimensionless;
    var iupmax: mM_per_ms {init: 0.004375};
    var iupmaxCAMK: mM_per_ms;
    var ka_plb: hertz {init: 0.11348};
    var kp_plb: hertz {init: 0.48302};
    var leak: mM_per_ms;
    var nsrmax: mM {init: 15.0};
    var pka_cyt_C: uM {pub: in};
    var time: ms {pub: in};
    var uptake: mM_per_ms;
    Imax = (1.0{dimensionless}-f_SERCA2a)*iupmax+f_SERCA2a*iupmaxCAMK;
    Iup = uptake-leak;
    Km_both = Km_pka;
    Km_camk = Km_np-0.00017{mM};
    Km_pka = Km_np*(1.0{dimensionless}-0.46{dimensionless});
    Km_up = f_np*Km_np+f_pka_only*Km_pka+f_camk_only*Km_camk+f_both*Km_both;
    f_SERCA2a = 1.0{dimensionless}/(1.0{dimensionless}+sqr(0.03{dimensionless}/active));
    f_both = f_pka*camk_f_plb;
    f_camk_only = camk_f_plb-f_both;
    f_np = 1.0{dimensionless}-f_pka_only-f_camk_only-f_both;
    f_pka = sel
      case iup_f_pka_val < 0.0{dimensionless}:
        0.0{dimensionless};
      otherwise:
        iup_f_pka_val;
    endsel;
    f_pka_only = f_pka-f_both;
    ode(f_plb, time) = 0.001{dimensionless_times_1e3}*(ka_plb*pka_cyt_C*(1.0{dimensionless}-f_plb)/(Ka_plb+(1.0{dimensionless}-f_plb)*1.0{uM})-kp_plb*PP1f_cyt*f_plb/(Kp_plb+f_plb*1.0{uM}));
    iup_f_pka_val = (f_plb-0.6591{dimensionless})/(0.9945{dimensionless}-0.6591{dimensionless});
    iupmaxCAMK = 3.25{dimensionless}*iupmax;
    leak = Imax*Ca_nsr/nsrmax;
    uptake = Imax*Ca/(Ca+Km_up);
  enddef;

  def comp membrane as
    var ICa_tot: uA_per_cm2 {pub: in};
    var ICl_tot: uA_per_cm2 {pub: in};
    var IK_tot: uA_per_cm2 {pub: in};
    var INa_tot: uA_per_cm2 {pub: in};
    var V: mV {pub: out, init: -87.491};
    var i_ion: uA_per_cm2;
    var i_stim: uA_per_cm2 {pub: in};
    var time: ms {pub: in};
    ode(V, time) = -(i_ion+i_stim)/1.0{uF_per_cm2};
    i_ion = INa_tot+IK_tot+ICa_tot+ICl_tot;
  enddef;

  def comp nernst as
    var Cl: mM {pub: in};
    var Clo: mM {pub: in};
    var ECl: mV {pub: out};
    var EK: mV {pub: out};
    var EKs: mV {pub: out};
    var ENa: mV {pub: out};
    var Ko: mM {pub: in};
    var Na: mM {pub: in};
    var Nao: mM {pub: in};
    var PNaK: dimensionless {init: 0.01833};
    var RTF: mV {pub: in};
    var potassium_K: mM {pub: in};
    ECl = -RTF*ln(Clo/Cl);
    EK = RTF*ln(Ko/potassium_K);
    EKs = RTF*ln((Ko+PNaK*Nao)/(potassium_K+PNaK*Na));
    ENa = RTF*ln(Nao/Na);
  enddef;

  def comp pde as
    var KPDEp: uM {init: 0.52218};
    var KmIbmxPde2: dimensionless {init: 21.58};
    var KmIbmxPde3: dimensionless {init: 2.642};
    var KmIbmxPde4: dimensionless {init: 11.89};
    var KmPDE2: uM {init: 50.0};
    var KmPDE3: uM {init: 0.8};
    var KmPDE4: uM {init: 1.4};
    var PDE2_cav: uM;
    var PDE2_cyt: uM;
    var PDE2_eca: uM;
    var PDE2_tot: uM {init: 0.029268};
    var PDE3_P_cav: uM {init: 2.36821659448036986e-02};
    var PDE3_P_cyt: uM {init: 1.28402905095187994e-02};
    var PDE3_cav: uM;
    var PDE3_cyt: uM;
    var PDE3_tot: uM;
    var PDE4_P_cav: uM {init: 6.37363047239019025e-03};
    var PDE4_P_cyt: uM {init: 9.17039986149184062e-03};
    var PDE4_P_eca: uM {init: 4.29171113639321980e-05};
    var PDE4_cav: uM;
    var PDE4_cyt: uM;
    var PDE4_eca: uM;
    var PDE4_tot: uM;
    var cAMP_cav: uM {pub: in};
    var cAMP_cyt: uM {pub: in};
    var cAMP_eca: uM {pub: in};
    var dcAMP_PDE2_cav: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_PDE2_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_PDE2_eca: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_PDE3_cav: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_PDE3_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_PDE4_cav: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_PDE4_cyt: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var dcAMP_PDE4_eca: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var delta_k_pde34: dimensionless {init: 3.0};
    var f_pde2_cav: dimensionless {init: 0.16957};
    var f_pde2_cyt: dimensionless;
    var f_pde2_eca: dimensionless {init: 2.12570000000000006e-04};
    var f_pde2_part: dimensionless;
    var f_pde3_cav: dimensionless;
    var f_pde3_cyt: dimensionless;
    var f_pde4_cav: dimensionless {init: 0.12481};
    var f_pde4_cyt: dimensionless;
    var f_pde4_eca: dimensionless;
    var f_pde4_part: dimensionless {init: 0.125};
    var f_pde_part: dimensionless {init: 0.2};
    var ff_pde3_cyt: dimensionless {init: 0.35};
    var h_ibmx_pde2: dimensionless {init: 1.167};
    var h_ibmx_pde3: dimensionless {init: 0.7629};
    var h_ibmx_pde4: dimensionless {init: 0.9024};
    var ibmx: uM {init: 0.0};
    var ibmx2: uM;
    var ibmx3: uM;
    var ibmx4: uM;
    var ibmx_h2: dimensionless;
    var ibmx_h3: dimensionless;
    var ibmx_h4: dimensionless;
    var kPDE2: hertz {init: 20.0};
    var kPDE3: hertz {init: 2.5};
    var kPDE4: hertz {init: 4.0};
    var kbPDEp: hertz;
    var kfPDEp: per_mM_per_ms {init: 0.0196};
    var pde_PDE3_tot_alpha: dimensionless;
    var pde_PDE3_tot_beta: dimensionless;
    var pka_cav_C: uM {pub: in};
    var pka_cyt_C: uM {pub: in};
    var pka_eca_C: uM {pub: in};
    var r_pde34_frac: dimensionless {init: 3.71};
    var r_pde3_cyt: dimensionless;
    var time: ms {pub: in};
    var vr_cav: dimensionless {pub: in};
    var vr_cyt: dimensionless {pub: in};
    var vr_eca: dimensionless {pub: in};
    PDE2_cav = ibmx2*f_pde2_cav*vr_cav;
    PDE2_cyt = ibmx2*f_pde2_cyt*vr_cyt;
    PDE2_eca = ibmx2*f_pde2_eca*vr_eca;
    ode(PDE3_P_cav, time) = 0.001{dimensionless_times_1e3}*(kfPDEp*pka_cav_C*(PDE3_cav-PDE3_P_cav)-kbPDEp*PDE3_P_cav);
    ode(PDE3_P_cyt, time) = 0.001{dimensionless_times_1e3}*(kfPDEp*pka_cyt_C*(PDE3_cyt-PDE3_P_cyt)-kbPDEp*PDE3_P_cyt);
    PDE3_cav = ibmx3*f_pde3_cav*vr_cav;
    PDE3_cyt = ibmx3*f_pde3_cyt*vr_cyt;
    PDE3_tot = pde_PDE3_tot_alpha/pde_PDE3_tot_beta*PDE2_tot;
    ode(PDE4_P_cav, time) = 0.001{dimensionless_times_1e3}*(kfPDEp*pka_cav_C*(PDE4_cav-PDE4_P_cav)-kbPDEp*PDE4_P_cav);
    ode(PDE4_P_cyt, time) = 0.001{dimensionless_times_1e3}*(kfPDEp*pka_cyt_C*(PDE4_cyt-PDE4_P_cyt)-kbPDEp*PDE4_P_cyt);
    ode(PDE4_P_eca, time) = 0.001{dimensionless_times_1e3}*(kfPDEp*pka_eca_C*(PDE4_eca-PDE4_P_eca)-kbPDEp*PDE4_P_eca);
    PDE4_cav = ibmx4*f_pde4_cav*vr_cav;
    PDE4_cyt = ibmx4*f_pde4_cyt*vr_cyt;
    PDE4_eca = ibmx4*f_pde4_eca*vr_eca;
    PDE4_tot = ((f_pde_part-f_pde2_part)*PDE2_tot+f_pde_part*PDE3_tot)/((1.0{dimensionless}+r_pde34_frac)*f_pde4_part-f_pde_part);
    dcAMP_PDE2_cav = PDE2_cav*kPDE2/(1.0{dimensionless}+KmPDE2/cAMP_cav);
    dcAMP_PDE2_cyt = PDE2_cyt*kPDE2/(1.0{dimensionless}+KmPDE2/cAMP_cyt);
    dcAMP_PDE2_eca = PDE2_eca*kPDE2/(1.0{dimensionless}+KmPDE2/cAMP_eca);
    dcAMP_PDE3_cav = (PDE3_cav+(delta_k_pde34-1.0{dimensionless})*PDE3_P_cav)*kPDE3/(1.0{dimensionless}+KmPDE3/cAMP_cav);
    dcAMP_PDE3_cyt = (PDE3_cyt+(delta_k_pde34-1.0{dimensionless})*PDE3_P_cyt)*kPDE3/(1.0{dimensionless}+KmPDE3/cAMP_cyt);
    dcAMP_PDE4_cav = (PDE4_cav+(delta_k_pde34-1.0{dimensionless})*PDE4_P_cav)*kPDE4/(1.0{dimensionless}+KmPDE4/cAMP_cav);
    dcAMP_PDE4_cyt = (PDE4_cyt+(delta_k_pde34-1.0{dimensionless})*PDE4_P_cyt)*kPDE4/(1.0{dimensionless}+KmPDE4/cAMP_cyt);
    dcAMP_PDE4_eca = (PDE4_eca+(delta_k_pde34-1.0{dimensionless})*PDE4_P_eca)*kPDE4/(1.0{dimensionless}+KmPDE4/cAMP_eca);
    f_pde2_cyt = 1.0{dimensionless}-f_pde2_cav-f_pde2_eca;
    f_pde2_part = f_pde2_cav+f_pde2_eca;
    f_pde3_cav = r_pde34_frac*f_pde4_part*PDE4_tot/PDE3_tot;
    f_pde3_cyt = 1.0{dimensionless}-f_pde3_cav;
    f_pde4_cyt = 1.0{dimensionless}-f_pde4_part;
    f_pde4_eca = f_pde4_part-f_pde4_cav;
    ibmx2 = (1.0{dimensionless}-ibmx_h2/(KmIbmxPde2+ibmx_h2))*PDE2_tot;
    ibmx3 = (1.0{dimensionless}-ibmx_h3/(KmIbmxPde3+ibmx_h3))*PDE3_tot;
    ibmx4 = (1.0{dimensionless}-ibmx_h4/(KmIbmxPde4+ibmx_h4))*PDE4_tot;
    ibmx_h2 = pow(ibmx*1.0{m3_per_mol_times_1e3}, h_ibmx_pde2);
    ibmx_h3 = pow(ibmx*1.0{m3_per_mol_times_1e3}, h_ibmx_pde3);
    ibmx_h4 = pow(ibmx*1.0{m3_per_mol_times_1e3}, h_ibmx_pde4);
    kbPDEp = KPDEp*kfPDEp;
    pde_PDE3_tot_alpha = r_pde3_cyt*(f_pde4_part*(1.0{dimensionless}+r_pde34_frac-r_pde34_frac*f_pde2_part-f_pde_part)+f_pde2_part*(f_pde_part-1.0{dimensionless}))+r_pde34_frac*f_pde4_part*(f_pde_part-f_pde2_part);
    pde_PDE3_tot_beta = f_pde4_part*(1.0{dimensionless}+r_pde34_frac+f_pde_part*(r_pde3_cyt-r_pde34_frac))-f_pde_part*(1.0{dimensionless}+r_pde3_cyt);
    r_pde3_cyt = ff_pde3_cyt/(1.0{dimensionless}-ff_pde3_cyt);
  enddef;

  def comp phys as
    var F: C_per_mol {pub: out, init: 96487.0};
    var FFRT: s4_A2_per_g_per_m2_per_mol {pub: out};
    var FRT: per_mV {pub: out};
    var R: mJ_per_mol_per_K {init: 8314.0};
    var RTF: mV {pub: out};
    var T: kelvin {init: 310.0};
    FFRT = F*FRT;
    FRT = 1.0{dimensionless}/RTF;
    RTF = R*T/F;
  enddef;

  def comp pka as
    var K_pki: uM;
    var PKA_cav: uM {pub: out};
    var PKA_cyt: uM {pub: out};
    var PKA_eca: uM {pub: out};
    var PKA_tot: uM {init: 0.5};
    var PKI_cav: uM {pub: out};
    var PKI_cyt: uM {pub: out};
    var PKI_eca: uM {pub: out};
    var PKI_tot: uM;
    var b_pki: hertz {pub: out};
    var f_cav: dimensionless {init: 0.0388};
    var f_cyt: dimensionless;
    var f_eca: dimensionless {init: 0.1};
    var f_pki: per_mM_per_ms {pub: out, init: 50.0};
    var f_pki_cav: dimensionless;
    var f_pki_cyt: dimensionless;
    var f_pki_eca: dimensionless;
    var vr_cav: dimensionless {pub: in};
    var vr_cyt: dimensionless {pub: in};
    var vr_eca: dimensionless {pub: in};
    K_pki = 0.01{uM}/50.0{dimensionless};
    PKA_cav = f_cav*PKA_tot*vr_cav;
    PKA_cyt = f_cyt*PKA_tot*vr_cyt;
    PKA_eca = f_eca*PKA_tot*vr_eca;
    PKI_cav = f_pki_cav*PKI_tot*vr_cav;
    PKI_cyt = f_pki_cyt*PKI_tot*vr_cyt;
    PKI_eca = f_pki_eca*PKI_tot*vr_eca;
    PKI_tot = 0.2{dimensionless}*PKA_tot;
    b_pki = f_pki*K_pki;
    f_cyt = 1.0{dimensionless}-f_cav-f_eca;
    f_pki_cav = f_cav;
    f_pki_cyt = 1.0{dimensionless}-f_pki_cav-f_pki_eca;
    f_pki_eca = f_eca;
  enddef;

  def comp pka_cav as
    var A2R: uM {init: 2.25475702283052998e-01};
    var A2RC: uM {init: 2.76490711096605019e-03};
    var ARC: uM {init: 9.04820284659604013e-02};
    var C: uM {pub: out, init: 3.26565916584702978e-02};
    var K1: uM {pub: out, init: 2.4984};
    var K2: uM {pub: out, init: 11.359};
    var K3: m3_per_mol_times_1e3 {pub: out, init: 0.3755};
    var PKA_cav: uM {pub: in};
    var PKIC: uM {init: 1.92819110624504991e-01};
    var PKI_cav: uM {pub: in};
    var RCf: uM;
    var b1: hertz;
    var b2: hertz;
    var b3: per_mM_per_ms;
    var b_pki: hertz {pub: in};
    var cAMP_cav: uM {pub: in};
    var dcAMP: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var f1: per_mM_per_ms {pub: out, init: 100.0};
    var f2: per_mM_per_ms {pub: out, init: 100.0};
    var f3: hertz {pub: out, init: 100.0};
    var f_pki: per_mM_per_ms {pub: in};
    var time: ms {pub: in};
    ode(A2R, time) = 0.001{dimensionless_times_1e3}*(f3*A2RC-b3*A2R*C);
    ode(A2RC, time) = 0.001{dimensionless_times_1e3}*(f2*ARC*cAMP_cav-(b2+f3)*A2RC+b3*A2R*C);
    ode(ARC, time) = 0.001{dimensionless_times_1e3}*(f1*RCf*cAMP_cav-b1*ARC-f2*ARC*cAMP_cav+b2*A2RC);
    ode(C, time) = 0.001{dimensionless_times_1e3}*(f3*A2RC-b3*A2R*C+b_pki*PKIC-f_pki*(PKI_cav-PKIC)*C);
    ode(PKIC, time) = 0.001{dimensionless_times_1e3}*(f_pki*(PKI_cav-PKIC)*C-b_pki*PKIC);
    RCf = PKA_cav-ARC-A2RC-A2R;
    b1 = f1*K1;
    b2 = f2*K2;
    b3 = f3*K3;
    dcAMP = -f1*RCf*cAMP_cav+b1*ARC-f2*ARC*cAMP_cav+b2*A2RC;
  enddef;

  def comp pka_cyt as
    var A2R: uM {init: 4.89063888619455989e-01};
    var A2RC: uM {init: 6.64997605558790977e-02};
    var ARC: uM {init: 6.46928309115710060e-02};
    var C: uM {pub: out, init: 3.62113356111495976e-01};
    var K1: uM {init: 0.1088};
    var K2: uM {init: 0.4612};
    var K3: m3_per_mol_times_1e3 {init: 0.3755};
    var PKA_cyt: uM {pub: in};
    var PKIC: uM {init: 1.26950532507959013e-01};
    var PKI_cyt: uM {pub: in};
    var RCf: uM;
    var b1: hertz;
    var b2: hertz;
    var b3: per_mM_per_ms;
    var b_pki: hertz {pub: in};
    var cAMP_cyt: uM {pub: in};
    var dcAMP: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var f1: per_mM_per_ms;
    var f2: per_mM_per_ms;
    var f3: hertz;
    var f_pki: per_mM_per_ms {pub: in};
    var pka_cav_f1: per_mM_per_ms {pub: in};
    var pka_cav_f2: per_mM_per_ms {pub: in};
    var pka_cav_f3: hertz {pub: in};
    var time: ms {pub: in};
    ode(A2R, time) = 0.001{dimensionless_times_1e3}*(f3*A2RC-b3*A2R*C);
    ode(A2RC, time) = 0.001{dimensionless_times_1e3}*(f2*ARC*cAMP_cyt-(b2+f3)*A2RC+b3*A2R*C);
    ode(ARC, time) = 0.001{dimensionless_times_1e3}*(f1*RCf*cAMP_cyt-b1*ARC-f2*ARC*cAMP_cyt+b2*A2RC);
    ode(C, time) = 0.001{dimensionless_times_1e3}*(f3*A2RC-b3*A2R*C+b_pki*PKIC-f_pki*(PKI_cyt-PKIC)*C);
    ode(PKIC, time) = 0.001{dimensionless_times_1e3}*(f_pki*(PKI_cyt-PKIC)*C-b_pki*PKIC);
    RCf = PKA_cyt-ARC-A2RC-A2R;
    b1 = f1*K1;
    b2 = f2*K2;
    b3 = f3*K3;
    dcAMP = -f1*RCf*cAMP_cyt+b1*ARC-f2*ARC*cAMP_cyt+b2*A2RC;
    f1 = pka_cav_f1;
    f2 = pka_cav_f2;
    f3 = pka_cav_f3;
  enddef;

  def comp pka_eca as
    var A2R: uM {init: 8.17161796756963987e-01};
    var A2RC: uM {init: 1.74057375932567010e-01};
    var ARC: uM {init: 2.05444874210056000e-01};
    var C: uM {pub: out, init: 5.67249910261072965e-01};
    var K1: uM;
    var K2: uM;
    var K3: m3_per_mol_times_1e3;
    var PKA_eca: uM {pub: in};
    var PKIC: uM {init: 2.49911886495889995e-01};
    var PKI_eca: uM {pub: in};
    var RCf: uM;
    var b1: hertz;
    var b2: hertz;
    var b3: per_mM_per_ms;
    var b_pki: hertz {pub: in};
    var cAMP_eca: uM {pub: in};
    var dcAMP: mol_per_m3_per_s_times_1e_minus_3 {pub: out};
    var f1: per_mM_per_ms;
    var f2: per_mM_per_ms;
    var f3: hertz;
    var f_pki: per_mM_per_ms {pub: in};
    var pka_cav_K1: uM {pub: in};
    var pka_cav_K2: uM {pub: in};
    var pka_cav_K3: m3_per_mol_times_1e3 {pub: in};
    var pka_cav_f1: per_mM_per_ms {pub: in};
    var pka_cav_f2: per_mM_per_ms {pub: in};
    var pka_cav_f3: hertz {pub: in};
    var time: ms {pub: in};
    ode(A2R, time) = 0.001{dimensionless_times_1e3}*(f3*A2RC-b3*A2R*C);
    ode(A2RC, time) = 0.001{dimensionless_times_1e3}*(f2*ARC*cAMP_eca-(b2+f3)*A2RC+b3*A2R*C);
    ode(ARC, time) = 0.001{dimensionless_times_1e3}*(f1*RCf*cAMP_eca-b1*ARC-f2*ARC*cAMP_eca+b2*A2RC);
    ode(C, time) = 0.001{dimensionless_times_1e3}*(f3*A2RC-b3*A2R*C+b_pki*PKIC-f_pki*(PKI_eca-PKIC)*C);
    K1 = pka_cav_K1;
    K2 = pka_cav_K2;
    K3 = pka_cav_K3;
    ode(PKIC, time) = 0.001{dimensionless_times_1e3}*(f_pki*(PKI_eca-PKIC)*C-b_pki*PKIC);
    RCf = PKA_eca-ARC-A2RC-A2R;
    b1 = f1*K1;
    b2 = f2*K2;
    b3 = f3*K3;
    dcAMP = -f1*RCf*cAMP_eca+b1*ARC-f2*ARC*cAMP_eca+b2*A2RC;
    f1 = pka_cav_f1;
    f2 = pka_cav_f2;
    f3 = pka_cav_f3;
  enddef;

  def comp potassium as
    var AF: m2_mol_per_s_per_A_times_1e_minus_4 {pub: in};
    var CTKCl: mM_per_ms {pub: in};
    var IK1: uA_per_cm2 {pub: in};
    var IK_tot: uA_per_cm2 {pub: out};
    var IKr: uA_per_cm2 {pub: in};
    var IKs: uA_per_cm2 {pub: in};
    var IKur: uA_per_cm2 {pub: in};
    var INaK: uA_per_cm2 {pub: in};
    var ITo: uA_per_cm2 {pub: in};
    var K: mM {pub: out, init: 145.62};
    var i_stim: uA_per_cm2 {pub: in};
    var potassium_K_r1: mol_per_m_per_s_per_A_times_1e5;
    var time: ms {pub: in};
    var v_cyt: uL {pub: in};
    IK_tot = IK1+IKr+IKs+IKur+ITo-2.0{dimensionless}*INaK;
    ode(K, time) = potassium_K_r1*(IK_tot+i_stim)+CTKCl;
    potassium_K_r1 = -AF/v_cyt;
  enddef;

  def comp pp1 as
    var K: uM {init: 0.001};
    var Kdp: uM {init: 1.95259999999999991e-05};
    var Kp: uM {init: 0.001469};
    var PP1_cav: uM {pub: out, init: 0.25};
    var PP1_cyt: uM {init: 0.2};
    var PP1_eca: uM {pub: out, init: 0.1};
    var PP1f_cyt: uM {pub: out};
    var PP2A: uM {pub: out, init: 1.0};
    var di: uM;
    var f: dimensionless {init: 0.3};
    var inhib1_p: uM {init: 2.82662056977524001e-02};
    var inhib1_tot: uM;
    var kdp: hertz {init: 0.0035731};
    var kp: hertz {init: 0.010145};
    var pka_cyt_C: uM {pub: in};
    var pp1_PP1f_cyt_sum: uM;
    var time: ms {pub: in};
    PP1f_cyt = 0.5{dimensionless}*(sqrt(sqr(pp1_PP1f_cyt_sum)+4.0{dimensionless}*K*PP1_cyt)-pp1_PP1f_cyt_sum);
    di = inhib1_tot-inhib1_p;
    ode(inhib1_p, time) = 0.001{dimensionless_times_1e3}*(kp*pka_cyt_C*di/(Kp+di)-kdp*PP2A*inhib1_p/(Kdp+inhib1_p));
    inhib1_tot = f/(1.0{dimensionless}-f)*K+f*PP1_cyt;
    pp1_PP1f_cyt_sum = K-PP1_cyt+inhib1_p;
  enddef;

  def comp sodium as
    var AF: m2_mol_per_s_per_A_times_1e_minus_4 {pub: in};
    var CTNaCl: mM_per_ms {pub: in};
    var INa: uA_per_cm2 {pub: in};
    var INaCa: uA_per_cm2 {pub: in};
    var INaCaSR: uA_per_cm2 {pub: in};
    var INaK: uA_per_cm2 {pub: in};
    var INaL: uA_per_cm2 {pub: in};
    var INa_cyt: uA_per_cm2;
    var INa_tot: uA_per_cm2 {pub: out};
    var INab: uA_per_cm2 {pub: in};
    var Idiff_Na: mM_per_ms {pub: in};
    var Na: mM {pub: out, init: 6.8909};
    var Na_sr: mM {pub: out, init: 6.8909};
    var sodium_Na_r1: mol_per_m_per_s_per_A_times_1e5;
    var sodium_Na_r2: dimensionless;
    var sodium_Na_sr_r1: mol_per_m_per_s_per_A_times_1e5;
    var time: ms {pub: in};
    var v_cyt: uL {pub: in};
    var v_sr: uL {pub: in};
    INa_cyt = INa+INab+INaL+INaK*3.0{dimensionless}+INaCa*3.0{dimensionless};
    INa_tot = INa_cyt+INaCaSR*3.0{dimensionless};
    ode(Na, time) = sodium_Na_r1*INa_cyt+sodium_Na_r2*Idiff_Na+CTNaCl;
    ode(Na_sr, time) = -(sodium_Na_sr_r1*INaCaSR+Idiff_Na);
    sodium_Na_r1 = -AF/v_cyt;
    sodium_Na_r2 = v_sr/v_cyt;
    sodium_Na_sr_r1 = 3.0{dimensionless}*AF/v_sr;
  enddef;

  def comp stimulus as
    var amplitude: uA_per_cm2;
    var duration: ms {init: 0.5};
    var i_stim: uA_per_cm2 {pub: out};
    var offset: ms {init: 100.0};
    var period: ms {init: 1000.0};
    var time: ms {pub: in};
    amplitude = -80.0{uA_per_cm2};
    i_stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*amplitude;
  enddef;
  def map between ac and beta for
    vars beta_R_b1_tot and R_b1_tot;
  enddef;
  def map between ac and beta_cav for
    vars beta_cav_Gi_bg and Gi_bg;
    vars beta_cav_Gs_aGTP and Gs_aGTP;
  enddef;
  def map between ac and beta_cyt for
    vars beta_cyt_Gs_aGTP and Gs_aGTP;
  enddef;
  def map between ac and beta_eca for
    vars beta_eca_Gs_aGTP and Gs_aGTP;
  enddef;
  def map between ac and camp for
    vars dcAMP_AC47_cyt and dcAMP_AC47_cyt;
    vars dcAMP_AC47_eca and dcAMP_AC47_eca;
    vars dcAMP_AC56_cav and dcAMP_AC56_cav;
    vars dcAMP_AC56_cyt and dcAMP_AC56_cyt;
  enddef;
  def map between ac and cell for
    vars vr_cav and vr_cav;
    vars vr_cyt and vr_cyt;
    vars vr_eca and vr_eca;
  enddef;
  def map between akap_sig and engine for
    vars time and time;
  enddef;
  def map between akap_sig and ical for
    vars ICaL_arn and ICaL_arn;
    vars ICaL_tot and ICaL_tot;
    vars fp_ICaL and fp_ICaL;
  enddef;
  def map between akap_sig and irel for
    vars RyR_arn and RyR_arn;
    vars RyR_tot and RyR_tot;
    vars fp_RyR and fp_RyR;
  enddef;
  def map between akap_sig and pka for
    vars PKA_cav and PKA_cav;
  enddef;
  def map between akap_sig and pka_cav for
    vars pka_cav_C and C;
  enddef;
  def map between akap_sig and pp1 for
    vars PP1_cav and PP1_cav;
  enddef;
  def map between beta and beta_cav for
    vars Gi_tot and Gi_tot;
    vars Gs_tot and Gs_tot;
    vars R_b1_tot and beta_R_b1_tot;
    vars R_b2_tot and beta_R_b2_tot;
    vars f_Gi_cav and f_Gi_cav;
    vars f_Gs_cav and f_Gs_cav;
    vars f_Rb1_cav and f_Rb1_cav;
    vars f_Rb2_cav and f_Rb2_cav;
    vars k_act1_Gi and k_act1_Gi;
    vars k_act1_Gs and k_act1_Gs;
    vars k_act2_Gi and k_act2_Gi;
    vars k_act2_Gs and k_act2_Gs;
    vars k_b1_c and k_b1_c;
    vars k_b1_h and k_b1_h;
    vars k_b1_l and k_b1_l;
    vars k_b2_a and k_b2_a;
    vars k_b2_c and k_b2_c;
    vars k_b2_f and k_b2_f;
    vars k_b2_h and k_b2_h;
    vars k_b2_l and k_b2_l;
    vars k_b2_n and k_b2_n;
    vars k_grk_dp and k_grk_dp;
    vars k_grk_p and k_grk_p;
    vars k_hydr_Gi and k_hydr_Gi;
    vars k_hydr_Gs and k_hydr_Gs;
    vars k_pka_dp and k_pka_dp;
    vars k_pka_p and k_pka_p;
    vars k_reas_Gi and k_reas_Gi;
    vars k_reas_Gs and k_reas_Gs;
  enddef;
  def map between beta and beta_cyt for
    vars Gs_tot and Gs_tot;
    vars R_b1_tot and beta_R_b1_tot;
    vars f_Gs_cyt and f_Gs_cyt;
    vars f_Rb1_cyt and f_Rb1_cyt;
    vars k_act1_Gs and k_act1_Gs;
    vars k_act2_Gs and k_act2_Gs;
    vars k_b1_c and k_b1_c;
    vars k_b1_h and k_b1_h;
    vars k_b1_l and k_b1_l;
    vars k_grk_dp and k_grk_dp;
    vars k_grk_p and k_grk_p;
    vars k_hydr_Gs and k_hydr_Gs;
    vars k_pka_dp and k_pka_dp;
    vars k_pka_p and k_pka_p;
    vars k_reas_Gs and k_reas_Gs;
  enddef;
  def map between beta and beta_eca for
    vars Gi_tot and Gi_tot;
    vars Gs_tot and Gs_tot;
    vars R_b1_tot and beta_R_b1_tot;
    vars R_b2_tot and beta_R_b2_tot;
    vars f_Gi_eca and f_Gi_eca;
    vars f_Gs_eca and f_Gs_eca;
    vars f_Rb1_eca and f_Rb1_eca;
    vars f_Rb2_eca and f_Rb2_eca;
    vars k_act1_Gi and k_act1_Gi;
    vars k_act1_Gs and k_act1_Gs;
    vars k_act2_Gi and k_act2_Gi;
    vars k_act2_Gs and k_act2_Gs;
    vars k_b1_c and k_b1_c;
    vars k_b1_h and k_b1_h;
    vars k_b1_l and k_b1_l;
    vars k_b2_a and k_b2_a;
    vars k_b2_c and k_b2_c;
    vars k_b2_f and k_b2_f;
    vars k_b2_h and k_b2_h;
    vars k_b2_l and k_b2_l;
    vars k_b2_n and k_b2_n;
    vars k_grk_dp and k_grk_dp;
    vars k_grk_p and k_grk_p;
    vars k_hydr_Gi and k_hydr_Gi;
    vars k_hydr_Gs and k_hydr_Gs;
    vars k_pka_dp and k_pka_dp;
    vars k_pka_p and k_pka_p;
    vars k_reas_Gi and k_reas_Gi;
    vars k_reas_Gs and k_reas_Gs;
  enddef;
  def map between beta_cav and cell for
    vars vr_cav and vr_cav;
  enddef;
  def map between beta_cav and engine for
    vars time and time;
  enddef;
  def map between beta_cav and iso for
    vars iso_L and L;
  enddef;
  def map between beta_cav and pka_cav for
    vars pka_cav_C and C;
  enddef;
  def map between beta_cyt and cell for
    vars vr_cyt and vr_cyt;
  enddef;
  def map between beta_cyt and engine for
    vars time and time;
  enddef;
  def map between beta_cyt and iso for
    vars iso_L and L;
  enddef;
  def map between beta_cyt and pka_cyt for
    vars pka_cyt_C and C;
  enddef;
  def map between beta_eca and cell for
    vars vr_eca and vr_eca;
  enddef;
  def map between beta_eca and engine for
    vars time and time;
  enddef;
  def map between beta_eca and iso for
    vars iso_L and L;
  enddef;
  def map between beta_eca and pka_eca for
    vars pka_eca_C and C;
  enddef;
  def map between calcium and camk for
    vars Ca_sr and Ca_sr;
  enddef;
  def map between calcium and cell for
    vars AF and AF;
    vars v_CaL and v_CaL;
    vars v_cyt and v_cyt;
    vars v_jsr and v_jsr;
    vars v_nsr and v_nsr;
    vars v_sr and v_sr;
  enddef;
  def map between calcium and diff for
    vars Ca and Ca;
    vars Ca_CaL and Ca_CaL;
    vars Ca_jsr and Ca_jsr;
    vars Ca_nsr and Ca_nsr;
    vars Ca_sr and Ca_sr;
    vars Idiff_Ca and Idiff_Ca;
    vars Idiff_sr and Idiff_sr;
    vars Itr and Itr;
  enddef;
  def map between calcium and engine for
    vars time and time;
  enddef;
  def map between calcium and icab for
    vars Ca and Ca;
    vars ICab and ICab;
  enddef;
  def map between calcium and ical for
    vars ical_ICaL and ICaL;
  enddef;
  def map between calcium and ical_camk for
    vars Ca_sr and Ca_sr;
  enddef;
  def map between calcium and ical_np for
    vars Ca_sr and Ca_sr;
  enddef;
  def map between calcium and iks for
    vars Ca and Ca;
  enddef;
  def map between calcium and inaca for
    vars Ca and Ca;
    vars Ca_sr and Ca_sr;
    vars INaCa and INaCa;
    vars INaCaSR and INaCaSR;
  enddef;
  def map between calcium and ipca for
    vars Ca and Ca;
    vars IpCa and IpCa;
  enddef;
  def map between calcium and irel for
    vars Ca_jsr and Ca_jsr;
    vars Ca_sr and Ca_sr;
    vars Irel and Irel;
  enddef;
  def map between calcium and iup for
    vars Ca and Ca;
    vars Ca_nsr and Ca_nsr;
    vars Iup and Iup;
  enddef;
  def map between calcium and membrane for
    vars ICa_tot and ICa_tot;
  enddef;
  def map between calcium and pka_cyt for
    vars pka_cyt_C and C;
  enddef;
  def map between calcium and pp1 for
    vars PP2A and PP2A;
  enddef;
  def map between camk and cell for
    vars vr_cav and vr_cav;
    vars vr_cyt and vr_cyt;
    vars vr_eca and vr_eca;
  enddef;
  def map between camk and engine for
    vars time and time;
  enddef;
  def map between camk and ical_camk for
    vars f_ical and f_ical;
  enddef;
  def map between camk and ical_np for
    vars f_ical and f_ical;
  enddef;
  def map between camk and ik1 for
    vars f_ik1 and f_ik1;
  enddef;
  def map between camk and ina for
    vars f_ina and camk_f_ina;
  enddef;
  def map between camk and inal for
    vars f_ina and camk_f_ina;
  enddef;
  def map between camk and irel for
    vars f_ryr and f_ryr;
  enddef;
  def map between camk and ito for
    vars f_ito and f_ito;
  enddef;
  def map between camk and iup for
    vars active and active;
    vars f_plb and camk_f_plb;
  enddef;
  def map between camk and pp1 for
    vars PP1_cav and PP1_cav;
    vars PP1_eca and PP1_eca;
    vars PP1f_cyt and PP1f_cyt;
  enddef;
  def map between camp and cell for
    vars v_cav and v_cav;
    vars v_cyt and v_cyt;
    vars v_eca and v_eca;
  enddef;
  def map between camp and engine for
    vars time and time;
  enddef;
  def map between camp and pde for
    vars cAMP_cav and cAMP_cav;
    vars cAMP_cyt and cAMP_cyt;
    vars cAMP_eca and cAMP_eca;
    vars dcAMP_PDE2_cav and dcAMP_PDE2_cav;
    vars dcAMP_PDE2_cyt and dcAMP_PDE2_cyt;
    vars dcAMP_PDE2_eca and dcAMP_PDE2_eca;
    vars dcAMP_PDE3_cav and dcAMP_PDE3_cav;
    vars dcAMP_PDE3_cyt and dcAMP_PDE3_cyt;
    vars dcAMP_PDE4_cav and dcAMP_PDE4_cav;
    vars dcAMP_PDE4_cyt and dcAMP_PDE4_cyt;
    vars dcAMP_PDE4_eca and dcAMP_PDE4_eca;
  enddef;
  def map between camp and pka_cav for
    vars cAMP_cav and cAMP_cav;
    vars pka_cav_dcAMP and dcAMP;
  enddef;
  def map between camp and pka_cyt for
    vars cAMP_cyt and cAMP_cyt;
    vars pka_cyt_dcAMP and dcAMP;
  enddef;
  def map between camp and pka_eca for
    vars cAMP_eca and cAMP_eca;
    vars pka_eca_dcAMP and dcAMP;
  enddef;
  def map between cell and chloride for
    vars AF and AF;
    vars v_cyt and v_cyt;
    vars v_sr and v_sr;
  enddef;
  def map between cell and pde for
    vars vr_cav and vr_cav;
    vars vr_cyt and vr_cyt;
    vars vr_eca and vr_eca;
  enddef;
  def map between cell and phys for
    vars F and F;
  enddef;
  def map between cell and pka for
    vars vr_cav and vr_cav;
    vars vr_cyt and vr_cyt;
    vars vr_eca and vr_eca;
  enddef;
  def map between cell and potassium for
    vars AF and AF;
    vars v_cyt and v_cyt;
  enddef;
  def map between cell and sodium for
    vars AF and AF;
    vars v_cyt and v_cyt;
    vars v_sr and v_sr;
  enddef;
  def map between chloride and ctkcl for
    vars CTKCl and CTKCl;
  enddef;
  def map between chloride and ctnacl for
    vars CTNaCl and CTNaCl;
  enddef;
  def map between chloride and diff for
    vars Cl and Cl;
    vars Cl_sr and Cl_sr;
    vars Idiff_Cl and Idiff_Cl;
  enddef;
  def map between chloride and engine for
    vars time and time;
  enddef;
  def map between chloride and iclb for
    vars IClb and IClb;
  enddef;
  def map between chloride and iclca for
    vars Cl and Cl;
    vars IClCa and IClCa;
  enddef;
  def map between chloride and membrane for
    vars ICl_tot and ICl_tot;
  enddef;
  def map between chloride and nernst for
    vars Cl and Cl;
  enddef;
  def map between ctkcl and nernst for
    vars ECl and ECl;
    vars EK and EK;
  enddef;
  def map between ctkcl and potassium for
    vars CTKCl and CTKCl;
  enddef;
  def map between ctnacl and nernst for
    vars ECl and ECl;
    vars ENa and ENa;
  enddef;
  def map between ctnacl and sodium for
    vars CTNaCl and CTNaCl;
  enddef;
  def map between diff and sodium for
    vars Idiff_Na and Idiff_Na;
    vars Na and Na;
    vars Na_sr and Na_sr;
  enddef;
  def map between engine and ical_camk for
    vars time and time;
  enddef;
  def map between engine and ical_np for
    vars time and time;
  enddef;
  def map between engine and iclca for
    vars time and time;
  enddef;
  def map between engine and ikr for
    vars time and time;
  enddef;
  def map between engine and iks_np for
    vars time and time;
  enddef;
  def map between engine and iks_pka for
    vars time and time;
  enddef;
  def map between engine and iks_sig for
    vars time and time;
  enddef;
  def map between engine and ikur for
    vars time and time;
  enddef;
  def map between engine and ina for
    vars time and time;
  enddef;
  def map between engine and ina_camk for
    vars time and time;
  enddef;
  def map between engine and ina_np for
    vars time and time;
  enddef;
  def map between engine and ina_pka for
    vars time and time;
  enddef;
  def map between engine and inak for
    vars time and time;
  enddef;
  def map between engine and inal for
    vars time and time;
  enddef;
  def map between engine and irel for
    vars time and time;
  enddef;
  def map between engine and ito for
    vars time and time;
  enddef;
  def map between engine and iup for
    vars time and time;
  enddef;
  def map between engine and membrane for
    vars time and time;
  enddef;
  def map between engine and pde for
    vars time and time;
  enddef;
  def map between engine and pka_cav for
    vars time and time;
  enddef;
  def map between engine and pka_cyt for
    vars time and time;
  enddef;
  def map between engine and pka_eca for
    vars time and time;
  enddef;
  def map between engine and potassium for
    vars time and time;
  enddef;
  def map between engine and pp1 for
    vars time and time;
  enddef;
  def map between engine and sodium for
    vars time and time;
  enddef;
  def map between engine and stimulus for
    vars time and time;
  enddef;
  def map between extra and icab for
    vars Cao and Cao;
  enddef;
  def map between extra and ical_camk for
    vars Cao and Cao;
  enddef;
  def map between extra and ical_np for
    vars Cao and Cao;
  enddef;
  def map between extra and iclca for
    vars Clo and Clo;
  enddef;
  def map between extra and ik1 for
    vars Ko and Ko;
  enddef;
  def map between extra and ikr for
    vars Ko and Ko;
  enddef;
  def map between extra and inab for
    vars Nao and Nao;
  enddef;
  def map between extra and inaca for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between extra and inak for
    vars Ko and Ko;
  enddef;
  def map between extra and nernst for
    vars Clo and Clo;
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between icab and membrane for
    vars V and V;
  enddef;
  def map between icab and phys for
    vars F and F;
    vars FRT and FRT;
  enddef;
  def map between ical and ical_camk for
    vars ical_camk_ICaL and ICaL;
  enddef;
  def map between ical and ical_np for
    vars ical_np_ICaL and ICaL;
  enddef;
  def map between ical and irel for
    vars ICaL and ical_ICaL;
  enddef;
  def map between ical_camk and ical_np for
    vars ac_tau and ac_tau;
    vars in_a and in_a;
    vars in_b and in_b;
  enddef;
  def map between ical_camk and membrane for
    vars V and V;
  enddef;
  def map between ical_camk and phys for
    vars FFRT and FFRT;
    vars FRT and FRT;
  enddef;
  def map between ical_np and membrane for
    vars V and V;
  enddef;
  def map between ical_np and phys for
    vars FFRT and FFRT;
    vars FRT and FRT;
  enddef;
  def map between iclb and membrane for
    vars V and V;
  enddef;
  def map between iclb and nernst for
    vars ECl and ECl;
  enddef;
  def map between iclca and irel for
    vars Irel_pure and Irel_pure;
  enddef;
  def map between iclca and membrane for
    vars V and V;
  enddef;
  def map between iclca and phys for
    vars FFRT and FFRT;
    vars FRT and FRT;
  enddef;
  def map between ik1 and membrane for
    vars V and V;
  enddef;
  def map between ik1 and nernst for
    vars EK and EK;
  enddef;
  def map between ik1 and potassium for
    vars IK1 and IK1;
  enddef;
  def map between ikr and membrane for
    vars V and V;
  enddef;
  def map between ikr and nernst for
    vars EK and EK;
  enddef;
  def map between ikr and potassium for
    vars IKr and IKr;
  enddef;
  def map between iks and iks_np for
    vars iks_np_O1 and O1;
    vars iks_np_O2 and O2;
  enddef;
  def map between iks and iks_pka for
    vars iks_pka_O1 and O1;
    vars iks_pka_O2 and O2;
  enddef;
  def map between iks and iks_sig for
    vars IKs_arn and IKs_arn;
    vars IKs_tot and IKs_tot;
    vars fp_iks and fp_iks;
  enddef;
  def map between iks and membrane for
    vars V and V;
  enddef;
  def map between iks and nernst for
    vars EKs and EKs;
  enddef;
  def map between iks and potassium for
    vars IKs and IKs;
  enddef;
  def map between iks_np and membrane for
    vars V and V;
  enddef;
  def map between iks_np and phys for
    vars FRT and FRT;
  enddef;
  def map between iks_pka and membrane for
    vars V and V;
  enddef;
  def map between iks_pka and phys for
    vars FRT and FRT;
  enddef;
  def map between iks_sig and pka for
    vars PKA_eca and PKA_eca;
  enddef;
  def map between iks_sig and pka_eca for
    vars pka_eca_C and C;
  enddef;
  def map between iks_sig and pp1 for
    vars PP1_eca and PP1_eca;
  enddef;
  def map between ikur and membrane for
    vars V and V;
  enddef;
  def map between ikur and nernst for
    vars EK and EK;
  enddef;
  def map between ikur and pka_eca for
    vars pka_eca_C and C;
  enddef;
  def map between ikur and potassium for
    vars IKur and IKur;
  enddef;
  def map between ikur and pp1 for
    vars PP1_eca and PP1_eca;
  enddef;
  def map between ina and ina_camk for
    vars ina_camk_h and h;
    vars ina_camk_j and j;
    vars ina_camk_m and m;
  enddef;
  def map between ina and ina_np for
    vars ina_np_h and h;
    vars ina_np_j and j;
    vars ina_np_m and m;
  enddef;
  def map between ina and ina_pka for
    vars ina_pka_h and h;
    vars ina_pka_j and j;
    vars ina_pka_m and m;
  enddef;
  def map between ina and membrane for
    vars V and V;
  enddef;
  def map between ina and nernst for
    vars ENa and ENa;
  enddef;
  def map between ina and pka_cav for
    vars pka_cav_C and C;
  enddef;
  def map between ina and pp1 for
    vars PP1_cav and PP1_cav;
  enddef;
  def map between ina and sodium for
    vars INa and INa;
  enddef;
  def map between ina_camk and membrane for
    vars V and V;
  enddef;
  def map between ina_np and membrane for
    vars V and V;
  enddef;
  def map between ina_pka and membrane for
    vars V and V;
  enddef;
  def map between inab and membrane for
    vars V and V;
  enddef;
  def map between inab and phys for
    vars F and F;
    vars FRT and FRT;
  enddef;
  def map between inab and sodium for
    vars INab and INab;
    vars Na and Na;
  enddef;
  def map between inaca and membrane for
    vars V and V;
  enddef;
  def map between inaca and phys for
    vars FRT and FRT;
  enddef;
  def map between inaca and sodium for
    vars INaCa and INaCa;
    vars INaCaSR and INaCaSR;
    vars Na and Na;
    vars Na_sr and Na_sr;
  enddef;
  def map between inak and membrane for
    vars V and V;
  enddef;
  def map between inak and phys for
    vars FRT and FRT;
  enddef;
  def map between inak and pka_cav for
    vars pka_cav_C and C;
  enddef;
  def map between inak and potassium for
    vars INaK and INaK;
  enddef;
  def map between inak and pp1 for
    vars PP1_cav and PP1_cav;
  enddef;
  def map between inak and sodium for
    vars INaK and INaK;
    vars Na and Na;
  enddef;
  def map between inal and membrane for
    vars V and V;
  enddef;
  def map between inal and nernst for
    vars ENa and ENa;
  enddef;
  def map between inal and sodium for
    vars INaL and INaL;
  enddef;
  def map between ito and membrane for
    vars V and V;
  enddef;
  def map between ito and nernst for
    vars EK and EK;
  enddef;
  def map between ito and potassium for
    vars ITo and ITo;
  enddef;
  def map between iup and pka_cyt for
    vars pka_cyt_C and C;
  enddef;
  def map between iup and pp1 for
    vars PP1f_cyt and PP1f_cyt;
  enddef;
  def map between membrane and potassium for
    vars IK_tot and IK_tot;
  enddef;
  def map between membrane and sodium for
    vars INa_tot and INa_tot;
  enddef;
  def map between membrane and stimulus for
    vars i_stim and i_stim;
  enddef;
  def map between nernst and phys for
    vars RTF and RTF;
  enddef;
  def map between nernst and potassium for
    vars potassium_K and K;
  enddef;
  def map between nernst and sodium for
    vars Na and Na;
  enddef;
  def map between pde and pka_cav for
    vars pka_cav_C and C;
  enddef;
  def map between pde and pka_cyt for
    vars pka_cyt_C and C;
  enddef;
  def map between pde and pka_eca for
    vars pka_eca_C and C;
  enddef;
  def map between pka and pka_cav for
    vars PKA_cav and PKA_cav;
    vars PKI_cav and PKI_cav;
    vars b_pki and b_pki;
    vars f_pki and f_pki;
  enddef;
  def map between pka and pka_cyt for
    vars PKA_cyt and PKA_cyt;
    vars PKI_cyt and PKI_cyt;
    vars b_pki and b_pki;
    vars f_pki and f_pki;
  enddef;
  def map between pka and pka_eca for
    vars PKA_eca and PKA_eca;
    vars PKI_eca and PKI_eca;
    vars b_pki and b_pki;
    vars f_pki and f_pki;
  enddef;
  def map between pka_cav and pka_cyt for
    vars f1 and pka_cav_f1;
    vars f2 and pka_cav_f2;
    vars f3 and pka_cav_f3;
  enddef;
  def map between pka_cav and pka_eca for
    vars K1 and pka_cav_K1;
    vars K2 and pka_cav_K2;
    vars K3 and pka_cav_K3;
    vars f1 and pka_cav_f1;
    vars f2 and pka_cav_f2;
    vars f3 and pka_cav_f3;
  enddef;
  def map between pka_cyt and pp1 for
    vars C and pka_cyt_C;
  enddef;
  def map between potassium and stimulus for
    vars i_stim and i_stim;
  enddef;
enddef;
