//   FILE :  teusink_model_2000.xml
//
// CREATED :  12th May 2003
//
// LAST MODIFIED : 20th April 2005
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Teusink et al.'s 2000 model for glycolysis in yeast.
//
// CHANGES:
//   20/04/2005 - PJV - Updated syntax to conform with cellml1.1 specs
// publisher: Auckland Bioengineering Institute, The University of Auckland
// comment: FN Catherine Lloyd; This CellML version of the model has been recoded to remove the reaction element. The model has been opened in both PCEnv and COR and the units have been checked and are consistent. However, unfortunately the model can not be run in either PCEnv or COR at the moment due to the presence of 'unsuitable constraints' (PCEnv) or 'circular arguments' (COR). These coupled equations need to be solved iteratively at each time step. We intend this feature to become a future development of our simulation tools.
// created: W3CDTF 2003-05-12T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2008-01-07T07:39:20+13:00; Recoded the model to remove the reaction element.; Given Catherine; Family Lloyd; Other May
// title: Teusink et al.'s 2000 model for glycolysis in yeast.
// comment: FN Catherine Lloyd; This is the CellML description of Teusink et al.'s 2000 model for glycolysis in yeast.
// reference: Pubmed_id 10951190; Given Bas; Family Teusink; Given Jutta; Family Passarge; Given Corrine; Family Reijenga; Other A; Given Eugenia; Family Esgalhado; Given Coen; Family van der Weijden; Other C; Given Mike; Family Schepper; Given Michael; Family Walsh; Other C; Given Barbara; Family Bakker; Other M; Given Karel; Family van Dam; Given Hans; Family Westerhoff; Other V; Given Jacky; Family Snoep; Other L; title Can yeast glycolysis be understood in terms of in vitro kinetics of the constituent enzymes? Testing biochemistry.; volume 267; first_page 5313; title European Journal of Biochemistry; W3CDTF 2000-09-01; last_page 5329
// reference: subject_type keyword; glycoloysis; yeast; metabolism; enzyme kinetics
// species: Saccharomyces cerevisae
def model teusink_model_2000 as
  // Can yeast glycolysis be understood in terms of in vitro kinetics of the constituent enzymes? Testing biochemistry
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML runs in both OpenCell and COR to recreate the published results. The units have been checked and they are consistent. This particular CellML model is based on a Matlab file which, in turn, was exported from the working SBML file in the BioModels database. There are several subtle differences between the published paper and the working Matlab code which have been previously documented by the BioModels curators. In brief these are: in the kinetic law for ADH the species a should denote NAD and b Ethanol the last term in the equation should read bpq/(Kib Kiq Kp) and the rate equation for the PFK contains two errors: the R term should read: R = 1 + lambda1 + lambda2 + gR lambda1 lambda2 and the last term in the L equation should be squared. Also there are slight differences in the parameterisation of the model depending on whether it comes from the JWS or the BioModels database and, for Vmax values, please note that there is a conversion factor of approxinately 270 to convert from U/mg-protein as shown in Table 1 of the paper to mmol/(min*L_cytosol).
  //
  // Model Structure
  //
  // ABSTRACT: This paper examines whether the in vivo behavior of yeast glycolysis can be understood in terms of the in vitro kinetic properties of the constituent enzymes. In nongrowing, anaerobic, compressed Saccharomyces cerevisiae the values of the kinetic parameters of most glycolytic enzymes were determined. For the other enzymes appropriate literature values were collected. By inserting these values into a kinetic model for glycolysis, fluxes and metabolites were calculated. Under the same conditions fluxes and metabolite levels were measured. In our first model, branch reactions were ignored. This model failed to reach the stable steady state that was observed in the experimental flux measurements. Introduction of branches towards trehalose, glycogen, glycerol and succinate did allow such a steady state. The predictions of this branched model were compared with the empirical behavior. Half of the enzymes matched their predicted flux in vivo within a factor of 2. For the other enzymes it was calculated what deviation between in vivo and in vitro kinetic characteristics could explain the discrepancy between in vitro rate and in vivo flux.
  //
  // The original paper reference is cited below:
  //
  // Can yeast glycolysis be understood in terms of in vitro kinetics of the constituent enzymes? Testing biochemistry, Bas Teusink, Jutta Passarge, Corinne A. Reijenga, Eugenia Esgalhado, Coen C. van der Weijden, Mike Schepper, Michael C. Walsh, Barbara M. Bakker, Karel van Dam, Hans V. Westerhoff, and Jacky L. Snoep, 2000, European Journal of Biochemistry, 267, 5313-5329. PubMed ID: 10951190 (http://www.ncbi.nlm.nih.gov/pubmed/10951190)
  //
  // reaction diagram
  //
  // Schematic diagram of the glycolysis pathway model described by Teusink et al. 2000. Reactions in boxes show the branches introduced in the extended model.
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar2 as
    unit millimolar {expo: 2};
  enddef;
  def unit per_millimolar2 as
    unit millimolar {expo: -2};
  enddef;
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit flux as
    unit millimolar;
    unit minute {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  // title: GLCo
  // alternative: extracellular glucose
  def comp GLCo as
    // is: urn:miriam:obo.chebi:CHEBI%3A17234; urn:miriam:kegg.compound:C00293
    var GLCo: millimolar {pub: out, init: 50.0};
  enddef;

  // title: GLCi
  // alternative: intracellular glucose
  def comp GLCi as
    // is: urn:miriam:obo.chebi:CHEBI%3A17234; urn:miriam:kegg.compound:C00293
    var GLCi: millimolar {pub: out, init: 0.087};
    var v_GLT: flux {pub: in};
    var v_GLK: flux {pub: in};
    var time: minute {pub: in};
    ode(GLCi, time) = v_GLT-v_GLK;
  enddef;

  // title: G6P
  // alternative: glucose 6-phosphate
  def comp G6P as
    // is: urn:miriam:obo.chebi:CHEBI%3A17665; urn:miriam:kegg.compound:C00668
    var G6P: millimolar {pub: out, init: 2.45};
    var v_GLK: flux {pub: in};
    var v_PGI: flux {pub: in};
    var v_trehalose: flux {pub: in};
    var v_glycogen: flux {pub: in};
    var time: minute {pub: in};
    ode(G6P, time) = v_GLK-(v_PGI+2.0{dimensionless}*v_trehalose+v_glycogen);
  enddef;

  // title: F6P
  // alternative: fructose 6-phosphate
  def comp F6P as
    // is: urn:miriam:obo.chebi:CHEBI%3A15946; urn:miriam:kegg.compound:C05345
    var F6P: millimolar {pub: out, init: 0.62};
    var v_PGI: flux {pub: in};
    var v_PFK: flux {pub: in};
    var time: minute {pub: in};
    ode(F6P, time) = v_PGI-v_PFK;
  enddef;

  // title: F16P
  // alternative: fructose 1,6-bisphosphate
  def comp F16P as
    // is: urn:miriam:obo.chebi:CHEBI%3A16905; urn:miriam:kegg.compound:C00354
    var F16P: millimolar {pub: out, init: 5.51};
    var v_PFK: flux {pub: in};
    var v_ALD: flux {pub: in};
    var time: minute {pub: in};
    ode(F16P, time) = v_PFK-v_ALD;
  enddef;

  // title: F26P
  // alternative: fructose 2,6-bisphosphate
  def comp F26P as
    // is: urn:miriam:obo.chebi:CHEBI%3A28602; urn:miriam:kegg.compound:C00665
    var F26P: millimolar {pub: out, init: 0.02};
  enddef;

  // title: TRIO
  // alternative: triosphosphate
  def comp TRIO as
    // hasPart: urn:miriam:kegg.compound:C00111; urn:miriam:kegg.compound:C00118; urn:miriam:obo.chebi:CHEBI%3A29052; urn:miriam:obo.chebi:CHEBI%3A16108
    var TRIO: millimolar {pub: out, init: 0.96};
    var v_ALD: flux {pub: in};
    var v_GAPDH: flux {pub: in};
    var v_G3PDH: flux {pub: in};
    var time: minute {pub: in};
    ode(TRIO, time) = 2.0{dimensionless}*v_ALD-(v_GAPDH+v_G3PDH);
  enddef;

  // title: BPG
  // alternative: 1,3-bisphosphoglycerate
  def comp BPG as
    // is: urn:miriam:obo.chebi:CHEBI%3A16001; urn:miriam:kegg.compound:C00236
    var BPG: millimolar {pub: out, init: 0.0};
    var v_GAPDH: flux {pub: in};
    var v_PGK: flux {pub: in};
    var time: minute {pub: in};
    ode(BPG, time) = v_GAPDH-v_PGK;
  enddef;

  // title: P3G
  // alternative: 3-phosphoglycerate
  def comp P3G as
    // is: urn:miriam:obo.chebi:CHEBI%3A17794; urn:miriam:kegg.compound:C00197
    var P3G: millimolar {pub: out, init: 0.9};
    var v_PGK: flux {pub: in};
    var v_PGM: flux {pub: in};
    var time: minute {pub: in};
    ode(P3G, time) = v_PGK-v_PGM;
  enddef;

  // title: P2G
  // alternative: 2-phosphoglycerate
  def comp P2G as
    // is: urn:miriam:obo.chebi:CHEBI%3A17835; urn:miriam:kegg.compound:C00631
    var P2G: millimolar {pub: out, init: 0.12};
    var v_PGM: flux {pub: in};
    var v_ENO: flux {pub: in};
    var time: minute {pub: in};
    ode(P2G, time) = v_PGM-v_ENO;
  enddef;

  // title: PEP
  // alternative: phosphoenolpyruvate
  def comp PEP as
    // is: urn:miriam:obo.chebi:CHEBI%3A18021; urn:miriam:kegg.compound:C00074
    var PEP: millimolar {pub: out, init: 0.07};
    var v_ENO: flux {pub: in};
    var v_PYK: flux {pub: in};
    var time: minute {pub: in};
    ode(PEP, time) = v_ENO-v_PYK;
  enddef;

  // title: PYR
  // alternative: pyruvate
  def comp PYR as
    // is: urn:miriam:kegg.compound:C00022; urn:miriam:obo.chebi:CHEBI%3A15361
    var PYR: millimolar {pub: out, init: 1.85};
    var v_PYK: flux {pub: in};
    var v_PDC: flux {pub: in};
    var time: minute {pub: in};
    ode(PYR, time) = v_PYK-v_PDC;
  enddef;

  // title: ACE
  // alternative: acetaldehyde
  def comp ACE as
    // is: urn:miriam:obo.chebi:CHEBI%3A15343; urn:miriam:kegg.compound:C00084
    var ACE: millimolar {pub: out, init: 0.17};
    var v_PDC: flux {pub: in};
    var v_ADH: flux {pub: in};
    var v_succinate: flux {pub: in};
    var time: minute {pub: in};
    ode(ACE, time) = v_PDC-(v_ADH+2.0{dimensionless}*v_succinate);
  enddef;

  // title: P
  // alternative: high energy phosphates
  def comp P as
    // hasPart: urn:miriam:obo.chebi:CHEBI%3A15422; urn:miriam:obo.chebi:CHEBI%3A16761; urn:miriam:kegg.compound:C00002; urn:miriam:kegg.compound:C00008
    var P: millimolar {pub: out, init: 6.31};
    var v_GLK: flux {pub: in};
    var v_PFK: flux {pub: in};
    var v_PGK: flux {pub: in};
    var v_PYK: flux {pub: in};
    var v_ATP: flux {pub: in};
    var v_trehalose: flux {pub: in};
    var v_glycogen: flux {pub: in};
    var v_succinate: flux {pub: in};
    var time: minute {pub: in};
    ode(P, time) = v_PGK+v_PYK-(v_GLK+v_PFK+v_ATP+v_trehalose+v_glycogen+4.0{dimensionless}*v_succinate);
  enddef;

  // title: NADH
  // alternative: nicotinamide adenine dinucleotide
  def comp NADH as
    // is: urn:miriam:obo.chebi:CHEBI%3A16908; urn:miriam:kegg.compound:C00004
    var NADH: millimolar {pub: out, init: 0.39};
    var v_GAPDH: flux {pub: in};
    var v_ADH: flux {pub: in};
    var v_G3PDH: flux {pub: in};
    var v_succinate: flux {pub: in};
    var time: minute {pub: in};
    ode(NADH, time) = v_GAPDH+3.0{dimensionless}*v_succinate-(v_ADH+v_G3PDH);
  enddef;

  // title: NAD
  // alternative: charged nicotinamide adenine dinucleotide
  def comp NAD as
    // is: urn:miriam:obo.chebi:CHEBI%3A15846; urn:miriam:kegg.compound:C00003
    var NAD: millimolar {pub: out, init: 1.20};
    var v_GAPDH: flux {pub: in};
    var v_ADH: flux {pub: in};
    var v_G3PDH: flux {pub: in};
    var v_succinate: flux {pub: in};
    var time: minute {pub: in};
    ode(NAD, time) = v_ADH+v_G3PDH-(v_GAPDH+3.0{dimensionless}*v_succinate);
  enddef;

  def comp DHAP as
    var DHAP: millimolar {pub: out};
    var Keq_TPI: dimensionless {pub: out, init: 0.045};
    var TRIO: millimolar {pub: in};
    DHAP = TRIO/(1.0{dimensionless}+Keq_TPI);
  enddef;

  // title: GAP
  // alternative: D-glyceraldehyde-3-phosphate
  def comp GAP as
    var GAP: millimolar {pub: out};
    var Keq_TPI: dimensionless {pub: in};
    var TRIO: millimolar {pub: in};
    GAP = TRIO*Keq_TPI/(1.0{dimensionless}+Keq_TPI);
  enddef;

  // title: ADP
  // alternative: adenosine diphoshate
  def comp ADP as
    // is: urn:miriam:obo.chebi:CHEBI%3A16761; urn:miriam:kegg.compound:C00008
    var ADP: millimolar {pub: out};
    // hasPart: urn:miriam:kegg.compound:C00020; urn:miriam:kegg.compound:C00008; urn:miriam:kegg.compound:C00002; urn:miriam:obo.chebi:CHEBI%3A16027; urn:miriam:obo.chebi:CHEBI%3A16761; urn:miriam:obo.chebi:CHEBI%3A15422
    var SUM_P: millimolar {pub: out, init: 4.1};
    var Keq_AK: dimensionless {init: 0.450};
    var P: millimolar {pub: in};
    ADP = (SUM_P-sqrt(sqr(P)*(1.0{dimensionless}-4.0{dimensionless}*Keq_AK)+2{dimensionless}*SUM_P*P*(4.0{dimensionless}*Keq_AK-1.0{dimensionless})+sqr(SUM_P)))/(1.0{dimensionless}-4.0{dimensionless}*Keq_AK);
  enddef;

  // title: ATP
  // alternative: adenosine triphosphate
  def comp ATP as
    // is: urn:miriam:obo.chebi:CHEBI%3A15422; urn:miriam:kegg.compound:C00002
    var ATP: millimolar {pub: out};
    var P: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    ATP = (P-ADP)/2{dimensionless};
  enddef;

  // title: AMP
  // alternative: adenosine monophoshate
  def comp AMP as
    // is: urn:miriam:obo.chebi:CHEBI%3A16027; urn:miriam:kegg.compound:C00020
    var AMP: millimolar {pub: out};
    var SUM_P: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    AMP = SUM_P-(ATP+ADP);
  enddef;

  // title: ETOH
  // alternative: ethanol
  def comp ETOH as
    // is: urn:miriam:obo.chebi:CHEBI%3A16236; urn:miriam:kegg.compound:C00469
    var ETOH: millimolar {pub: out, init: 50.0};
  enddef;

  // title: GLY
  // alternative: glycerol
  def comp GLY as
    // is: urn:miriam:obo.chebi:CHEBI%3A17754; urn:miriam:kegg.compound:C00116
    var GLY: millimolar {pub: out, init: 0.15};
  enddef;
  // The following components describe the reactions of the core, unbranched model.

  def comp v_PGI as
    // isHomologTo: urn:miriam:reactome:REACT_116
    // is: urn:miriam:ec-code:5.3.1.9; urn:miriam:kegg.reaction:R00771
    var v_PGI: flux {pub: out};
    var Km_G6P: millimolar {init: 1.4};
    var Km_F6P: millimolar {init: 0.3};
    var Keq_PGI: dimensionless {init: 0.314};
    var v_max: flux {init: 339.677};
    var G6P: millimolar {pub: in};
    var F6P: millimolar {pub: in};
    v_PGI = v_max/Km_G6P*(G6P-F6P/Keq_PGI)/(1.0{dimensionless}+G6P/Km_G6P+F6P/Km_F6P);
  enddef;

  def comp v_PGM as
    // isHomologTo: urn:miriam:reactome:REACT_576
    // is: urn:miriam:ec-code:5.4.2.1; urn:miriam:kegg.reaction:R01518
    var v_PGM: flux {pub: out};
    var Km_P3G: millimolar {init: 1.2};
    var Km_P2G: millimolar {init: 0.08};
    var Keq_PGM: dimensionless {init: 0.19};
    var v_max: flux {init: 2525.81};
    var P2G: millimolar {pub: in};
    var P3G: millimolar {pub: in};
    v_PGM = v_max/Km_P3G*(P3G-P2G/Keq_PGM)/(1.0{dimensionless}+P3G/Km_P3G+P2G/Km_P2G);
  enddef;

  def comp v_ENO as
    // isHomologTo: urn:miriam:reactome:REACT_1400
    // is: urn:miriam:ec-code:4.2.1.11; urn:miriam:kegg.reaction:R00658
    var v_ENO: flux {pub: out};
    var Km_P2G: millimolar {init: 0.04};
    var Km_PEP: millimolar {init: 0.5};
    var Keq_ENO: dimensionless {init: 6.7};
    var v_max: flux {init: 365.806};
    var PEP: millimolar {pub: in};
    var P2G: millimolar {pub: in};
    v_ENO = v_max/Km_P2G*(P2G-PEP/Keq_ENO)/(1.0{dimensionless}+P2G/Km_P2G+PEP/Km_PEP);
  enddef;

  def comp v_GLK as
    // isHomologTo: urn:miriam:reactome:REACT_1318
    // is: urn:miriam:ec-code:2.7.1.2; urn:miriam:kegg.reaction:R00299
    var v_GLK: flux {pub: out};
    var Km_GLCi: millimolar {init: 0.08};
    var Km_G6P: millimolar {init: 30.0};
    var Km_ATP: millimolar {init: 0.15};
    var Km_ADP: millimolar {init: 0.23};
    var Keq_GLK: dimensionless {init: 3800};
    var v_max: flux {init: 226.452};
    var G6P: millimolar {pub: in};
    var GLCi: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    v_GLK = v_max/(Km_GLCi*Km_ATP)*(GLCi*ATP-G6P*ADP/Keq_GLK)/((1.0{dimensionless}+GLCi/Km_GLCi+G6P/Km_G6P)*(1.0{dimensionless}+ATP/Km_ATP+ADP/Km_ADP));
  enddef;

  def comp v_GAPDH as
    // isHomologTo: urn:miriam:reactome:REACT_1847
    // is: urn:miriam:ec-code:1.2.1.12; urn:miriam:kegg.reaction:R01061
    var v_GAPDH: flux {pub: out};
    var Km_GAP: millimolar {init: 0.21};
    var Km_BPG: millimolar {init: 0.0098};
    var Km_NAD: millimolar {init: 0.09};
    var Km_NADH: millimolar {init: 0.06};
    var v_max_f: flux {init: 1184.52};
    var v_max_r: flux {init: 6549.68};
    var Keq_TPI: dimensionless {pub: in};
    var BPG: millimolar {pub: in};
    var TRIO: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    v_GAPDH = (v_max_f*(Keq_TPI/(1.0{dimensionless}+Keq_TPI))*TRIO*NAD/(Km_GAP*Km_NAD)-v_max_r*BPG*NADH/(Km_BPG*Km_NADH))/((1.0{dimensionless}+Keq_TPI/(1.0{dimensionless}+Keq_TPI)*TRIO/Km_GAP+BPG/Km_BPG)*(1.0{dimensionless}+NAD/Km_NAD+NADH/Km_NADH));
  enddef;

  def comp v_PGK as
    // isHomologTo: urn:miriam:reactome:REACT_1771
    // is: urn:miriam:ec-code:2.7.2.3; urn:miriam:kegg.reaction:R01512
    var v_PGK: flux {pub: out};
    var Km_BPG: millimolar {init: 0.003};
    var Km_P3G: millimolar {init: 0.53};
    var Km_ADP: millimolar {init: 0.2};
    var Km_ATP: millimolar {init: 0.3};
    var Keq_PGK: dimensionless {init: 3200};
    var v_max: flux {init: 1306.45};
    var P3G: millimolar {pub: in};
    var BPG: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    v_PGK = v_max/(Km_P3G*Km_ATP)*(Keq_PGK*BPG*ADP-P3G*ATP)/((1.0{dimensionless}+BPG/Km_BPG+P3G/Km_P3G)*(1.0{dimensionless}+ATP/Km_ATP+ADP/Km_ADP));
  enddef;

  def comp v_PYK as
    // isHomologTo: urn:miriam:reactome:REACT_1911
    // is: urn:miriam:ec-code:2.7.1.40; urn:miriam:kegg.reaction:R00200
    var v_PYK: flux {pub: out};
    var Km_PEP: millimolar {init: 0.14};
    var Km_PYR: millimolar {init: 21.0};
    var Km_ADP: millimolar {init: 0.53};
    var Km_ATP: millimolar {init: 1.5};
    var Keq_PYK: dimensionless {init: 6500};
    var v_max: flux {init: 1088.71};
    var PYR: millimolar {pub: in};
    var PEP: millimolar {pub: in};
    var ADP: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    v_PYK = v_max/(Km_PEP*Km_ADP)*(PEP*ADP-PYR*ATP/Keq_PYK)/((1.0{dimensionless}+PEP/Km_PEP+PYR/Km_PYR)*(1.0{dimensionless}+ATP/Km_ATP+ADP/Km_ADP));
  enddef;

  def comp v_GLT as
    // isHomologTo: urn:miriam:reactome:REACT_2092
    // isVersionOf: urn:miriam:obo.go:GO%3A0046323
    var v_GLT: flux {pub: out};
    var Km_Glco: millimolar {init: 1.1918};
    var Km_Glci: millimolar {init: 1.1918};
    var Keq_Glc: dimensionless {init: 1};
    var v_max: flux {init: 97.264};
    var GLCo: millimolar {pub: in};
    var GLCi: millimolar {pub: in};
    v_GLT = v_max*(GLCo-GLCi/Keq_Glc)/(Km_Glco*(1.0{dimensionless}+GLCo/Km_Glco+GLCi/Km_Glci+0.91{dimensionless}*GLCo*GLCi/(Km_Glci*Km_Glco)));
  enddef;

  def comp v_ALD as
    // isHomologTo: urn:miriam:reactome:REACT_1602
    // is: urn:miriam:ec-code:4.1.2.13; urn:miriam:kegg.reaction:R01070
    var v_ALD: flux {pub: out};
    var Km_F16P: millimolar {init: 0.3};
    var Km_GAP: millimolar {init: 2.0};
    var Km_GAPi: millimolar {init: 10.0};
    var Km_DHAP: millimolar {init: 2.4};
    var Keq_ALD: millimolar {init: 0.069};
    var v_max: flux {init: 322.258};
    var Keq_TPI: dimensionless {pub: in};
    var TRIO: millimolar {pub: in};
    var F16P: millimolar {pub: in};
    v_ALD = v_max/Km_F16P*(F16P-Keq_TPI/(1.0{dimensionless}+Keq_TPI)*TRIO*(1.0{dimensionless}/(1.0{dimensionless}+Keq_TPI))*TRIO/Keq_ALD)/(1.0{dimensionless}+F16P/Km_F16P+Keq_TPI/(1.0{dimensionless}+Keq_TPI)*TRIO/Km_GAP+1.0{dimensionless}/(1.0{dimensionless}+Keq_TPI)*TRIO/Km_DHAP+Keq_TPI/(1.0{dimensionless}+Keq_TPI)*TRIO*(1.0{dimensionless}/(1.0{dimensionless}+Keq_TPI))*TRIO/(Km_GAP*Km_DHAP)+F16P*(Keq_TPI/(1.0{dimensionless}+Keq_TPI))*TRIO/(Km_GAPi*Km_F16P));
  enddef;

  def comp v_PDC as
    // is: urn:miriam:ec-code:4.1.1.1; urn:miriam:kegg.reaction:R00224
    var v_PDC: flux {pub: out};
    var nPDC: dimensionless {init: 1.9};
    var Km_PYR: millimolar {init: 4.33};
    var v_max: flux {init: 174.194};
    var PYR: millimolar {pub: in};
    v_PDC = v_max*(pow(PYR, nPDC)/pow(Km_PYR, nPDC))/(1.0{dimensionless}+pow(PYR, nPDC)/pow(Km_PYR, nPDC));
  enddef;

  def comp v_ADH as
    // isHomologTo: urn:miriam:reactome:REACT_799
    // isVersionOf: urn:miriam:ec-code:1.1.1.2; urn:miriam:kegg.reaction:R00746
    var v_ADH: flux {pub: out};
    var Km_NAD: millimolar {init: 0.17};
    var Km_NADH: millimolar {init: 0.11};
    var Km_ACE: millimolar {init: 1.11};
    var Km_ETOH: millimolar {init: 17.0};
    var Ki_NADH: millimolar {init: 0.031};
    var Ki_NAD: millimolar {init: 0.92};
    var Ki_ACE: millimolar {init: 1.1};
    var Ki_ETOH: millimolar {init: 90.0};
    var v_max: flux {init: 810.0};
    var Keq_ADH: dimensionless {init: 0.000069};
    var ETOH: millimolar {pub: in};
    var ACE: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    v_ADH = -(v_max/(Ki_NAD*Km_ETOH)*((NAD*ETOH-NADH*ACE/Keq_ADH)/(1.0{dimensionless}+NAD/Ki_NAD+Km_NAD*ETOH/(Ki_NAD*Km_ETOH)+Km_NADH*ACE/(Ki_NADH*Km_ACE)+NADH/Ki_NADH+NAD*ETOH/(Ki_NAD*Km_ETOH)+Km_NADH*NAD*ACE/(Ki_NAD*Ki_NADH*Km_ACE)+Km_NAD*ETOH*NADH/(Ki_NAD*Km_ETOH*Ki_NADH)+NADH*ACE/(Ki_NADH*Km_ACE)+NAD*ETOH*ACE/(Ki_NAD*Km_ETOH*Ki_ACE)+ETOH*NADH*ACE/(Ki_ETOH*Ki_NADH*Km_ACE))));
  enddef;

  def comp v_ATP as
    // isVersionOf: urn:miriam:ec-code:3.6.1.3; urn:miriam:obo.go:GO%3A0016887
    var v_ATP: flux {pub: out};
    var Km_ATPase: first_order_rate_constant {init: 33.7};
    var ATP: millimolar {pub: in};
    v_ATP = Km_ATPase*ATP;
  enddef;

  def comp v_PFK as
    // isHomologTo: urn:miriam:reactome:REACT_736
    // is: urn:miriam:ec-code:2.7.1.11; urn:miriam:kegg.reaction:R00756
    var v_PFK: flux {pub: out};
    var v_max: flux {init: 182.903};
    var gR: dimensionless {init: 5.12};
    var L0: per_millimolar2 {init: 0.66};
    var Km_F6P: millimolar {init: 0.1};
    var Km_ATP: millimolar {init: 0.71};
    var CATP: millimolar {init: 3.0};
    var Km_AMP: millimolar {init: 0.0995};
    var CAMP: dimensionless {init: 0.0845};
    var Ki_ATP: millimolar {init: 0.65};
    var Ci_ATP: dimensionless {init: 100.0};
    var Km_F26BP: millimolar {init: 0.000682};
    var CF26BP: dimensionless {init: 0.0174};
    var Km_F16BP: millimolar {init: 0.111};
    var CF16BP: dimensionless {init: 0.397};
    var L: per_millimolar2;
    var R: dimensionless;
    var T: millimolar;
    var F6P: millimolar {pub: in};
    var F16P: millimolar {pub: in};
    var F26P: millimolar {pub: in};
    var ATP: millimolar {pub: in};
    var AMP: millimolar {pub: in};
    v_PFK = v_max*gR*(F6P/Km_F6P)*(ATP/Km_ATP)*(R/(sqr(R)+L*sqr(T)));
    R = 1.0{dimensionless}+F6P/Km_F6P+ATP/Km_ATP+gR*(F6P/Km_F6P)*(ATP/Km_ATP);
    L = L0*sqr((1.0{dimensionless}+Ci_ATP*(ATP/Ki_ATP))/(1.0{dimensionless}+ATP/Ki_ATP))*sqr((1.0{dimensionless}+CAMP*(AMP/Km_AMP))/(1.0{dimensionless}+AMP/Km_AMP))*sqr((1.0{dimensionless}+CF26BP*(F26P/Km_F26BP)+CF16BP*(F16P/Km_F16BP))/(1.0{dimensionless}+F26P/Km_F26BP+F16P/Km_F16BP));
    T = 1.0{millimolar}+CATP*(ATP/Km_ATP);
  enddef;
  // The following components describe the reactions of the branches introduced in the extended model.  For simplicity, fluxes to glycogen and trehalose are introduced as experimentally derived constants.

  def comp v_G3PDH as
    // isVersionOf: urn:miriam:ec-code:1.1.1.8
    var v_G3PDH: flux {pub: out};
    var Km_DHAP: millimolar {init: 0.4};
    var Km_GLY: millimolar {init: 1};
    var Km_NADH: millimolar {init: 0.023};
    var Km_NAD: millimolar {init: 0.93};
    var Keq_G3PDH: dimensionless {init: 4300};
    var v_max: flux {init: 70.15};
    var Keq_TPI: dimensionless {pub: in};
    var TRIO: millimolar {pub: in};
    var GLY: millimolar {pub: in};
    var NADH: millimolar {pub: in};
    var NAD: millimolar {pub: in};
    v_G3PDH = v_max/(Km_DHAP*Km_NADH)*(1.0{dimensionless}/(1.0{dimensionless}+Keq_TPI)*TRIO*NADH-GLY*NAD/Keq_G3PDH)/((1.0{dimensionless}+1.0{dimensionless}/(1.0{dimensionless}+Keq_TPI)*TRIO/Km_DHAP+GLY/Km_GLY)*(1.0{dimensionless}+NADH/Km_NADH+NAD/Km_NAD));
  enddef;

  def comp v_succinate as
    // isVersionOf: urn:miriam:obo.go:GO%3A0006105
    var v_succinate: flux {pub: out};
    var Km_succinate: first_order_rate_constant {init: 21.4};
    var ACE: millimolar {pub: in};
    v_succinate = Km_succinate*ACE;
  enddef;

  def comp v_glycogen as
    // isHomologTo: urn:miriam:reactome:REACT_1736
    // isVersionOf: urn:miriam:obo.go:GO%3A0005978
    var v_glycogen: flux {pub: out, init: 6.0};
  enddef;

  def comp v_trehalose as
    // isVersionOf: urn:miriam:obo.go:GO%3A0005992
    var v_trehalose: flux {pub: out, init: 2.4};
  enddef;
  // Connections
  def map between GLCi and environment for
    vars time and time;
  enddef;
  def map between G6P and environment for
    vars time and time;
  enddef;
  def map between F6P and environment for
    vars time and time;
  enddef;
  def map between F16P and environment for
    vars time and time;
  enddef;
  def map between TRIO and environment for
    vars time and time;
  enddef;
  def map between BPG and environment for
    vars time and time;
  enddef;
  def map between P3G and environment for
    vars time and time;
  enddef;
  def map between P2G and environment for
    vars time and time;
  enddef;
  def map between PEP and environment for
    vars time and time;
  enddef;
  def map between PYR and environment for
    vars time and time;
  enddef;
  def map between ACE and environment for
    vars time and time;
  enddef;
  def map between P and environment for
    vars time and time;
  enddef;
  def map between NADH and environment for
    vars time and time;
  enddef;
  def map between NAD and environment for
    vars time and time;
  enddef;
  def map between GLCo and v_GLT for
    vars GLCo and GLCo;
  enddef;
  def map between GLCi and v_GLT for
    vars GLCi and GLCi;
    vars v_GLT and v_GLT;
  enddef;
  def map between GLCi and v_GLK for
    vars GLCi and GLCi;
    vars v_GLK and v_GLK;
  enddef;
  def map between G6P and v_GLK for
    vars G6P and G6P;
    vars v_GLK and v_GLK;
  enddef;
  def map between G6P and v_PGI for
    vars G6P and G6P;
    vars v_PGI and v_PGI;
  enddef;
  def map between G6P and v_trehalose for
    vars v_trehalose and v_trehalose;
  enddef;
  def map between G6P and v_glycogen for
    vars v_glycogen and v_glycogen;
  enddef;
  def map between F6P and v_PGI for
    vars F6P and F6P;
    vars v_PGI and v_PGI;
  enddef;
  def map between F6P and v_PFK for
    vars F6P and F6P;
    vars v_PFK and v_PFK;
  enddef;
  def map between F16P and v_PFK for
    vars F16P and F16P;
    vars v_PFK and v_PFK;
  enddef;
  def map between F16P and v_ALD for
    vars F16P and F16P;
    vars v_ALD and v_ALD;
  enddef;
  def map between F26P and v_PFK for
    vars F26P and F26P;
  enddef;
  def map between TRIO and v_ALD for
    vars v_ALD and v_ALD;
    vars TRIO and TRIO;
  enddef;
  def map between TRIO and v_GAPDH for
    vars v_GAPDH and v_GAPDH;
    vars TRIO and TRIO;
  enddef;
  def map between TRIO and v_G3PDH for
    vars v_G3PDH and v_G3PDH;
    vars TRIO and TRIO;
  enddef;
  def map between BPG and v_GAPDH for
    vars BPG and BPG;
    vars v_GAPDH and v_GAPDH;
  enddef;
  def map between BPG and v_PGK for
    vars BPG and BPG;
    vars v_PGK and v_PGK;
  enddef;
  def map between P3G and v_PGK for
    vars P3G and P3G;
    vars v_PGK and v_PGK;
  enddef;
  def map between P3G and v_PGM for
    vars P3G and P3G;
    vars v_PGM and v_PGM;
  enddef;
  def map between P2G and v_PGM for
    vars P2G and P2G;
    vars v_PGM and v_PGM;
  enddef;
  def map between P2G and v_ENO for
    vars P2G and P2G;
    vars v_ENO and v_ENO;
  enddef;
  def map between PEP and v_ENO for
    vars PEP and PEP;
    vars v_ENO and v_ENO;
  enddef;
  def map between PEP and v_PYK for
    vars PEP and PEP;
    vars v_PYK and v_PYK;
  enddef;
  def map between PYR and v_PYK for
    vars PYR and PYR;
    vars v_PYK and v_PYK;
  enddef;
  def map between PYR and v_PDC for
    vars PYR and PYR;
    vars v_PDC and v_PDC;
  enddef;
  def map between ACE and v_PDC for
    vars v_PDC and v_PDC;
  enddef;
  def map between ACE and v_ADH for
    vars ACE and ACE;
    vars v_ADH and v_ADH;
  enddef;
  def map between ACE and v_succinate for
    vars ACE and ACE;
    vars v_succinate and v_succinate;
  enddef;
  def map between P and v_GLK for
    vars v_GLK and v_GLK;
  enddef;
  def map between P and v_PFK for
    vars v_PFK and v_PFK;
  enddef;
  def map between P and v_PGK for
    vars v_PGK and v_PGK;
  enddef;
  def map between P and v_PYK for
    vars v_PYK and v_PYK;
  enddef;
  def map between P and v_ATP for
    vars v_ATP and v_ATP;
  enddef;
  def map between P and v_trehalose for
    vars v_trehalose and v_trehalose;
  enddef;
  def map between P and v_glycogen for
    vars v_glycogen and v_glycogen;
  enddef;
  def map between P and v_succinate for
    vars v_succinate and v_succinate;
  enddef;
  def map between ATP and v_GLK for
    vars ATP and ATP;
  enddef;
  def map between ATP and v_PGK for
    vars ATP and ATP;
  enddef;
  def map between ATP and v_PYK for
    vars ATP and ATP;
  enddef;
  def map between ATP and v_PFK for
    vars ATP and ATP;
  enddef;
  def map between ATP and v_ATP for
    vars ATP and ATP;
  enddef;
  def map between ADP and P for
    vars P and P;
  enddef;
  def map between ATP and ADP for
    vars ADP and ADP;
  enddef;
  def map between ATP and P for
    vars P and P;
  enddef;
  def map between ATP and AMP for
    vars ATP and ATP;
  enddef;
  def map between ADP and AMP for
    vars ADP and ADP;
    vars SUM_P and SUM_P;
  enddef;
  def map between ADP and v_GLK for
    vars ADP and ADP;
  enddef;
  def map between ADP and v_PGK for
    vars ADP and ADP;
  enddef;
  def map between ADP and v_PYK for
    vars ADP and ADP;
  enddef;
  def map between AMP and v_PFK for
    vars AMP and AMP;
  enddef;
  def map between NADH and v_GAPDH for
    vars NADH and NADH;
    vars v_GAPDH and v_GAPDH;
  enddef;
  def map between NADH and v_ADH for
    vars NADH and NADH;
    vars v_ADH and v_ADH;
  enddef;
  def map between NADH and v_G3PDH for
    vars NADH and NADH;
    vars v_G3PDH and v_G3PDH;
  enddef;
  def map between NADH and v_succinate for
    vars v_succinate and v_succinate;
  enddef;
  def map between NAD and v_GAPDH for
    vars NAD and NAD;
    vars v_GAPDH and v_GAPDH;
  enddef;
  def map between NAD and v_ADH for
    vars NAD and NAD;
    vars v_ADH and v_ADH;
  enddef;
  def map between NAD and v_G3PDH for
    vars NAD and NAD;
    vars v_G3PDH and v_G3PDH;
  enddef;
  def map between NAD and v_succinate for
    vars v_succinate and v_succinate;
  enddef;
  def map between DHAP and TRIO for
    vars TRIO and TRIO;
  enddef;
  def map between GAP and TRIO for
    vars TRIO and TRIO;
  enddef;
  def map between DHAP and GAP for
    vars Keq_TPI and Keq_TPI;
  enddef;
  def map between DHAP and v_GAPDH for
    vars Keq_TPI and Keq_TPI;
  enddef;
  def map between DHAP and v_ALD for
    vars Keq_TPI and Keq_TPI;
  enddef;
  def map between DHAP and v_G3PDH for
    vars Keq_TPI and Keq_TPI;
  enddef;
  def map between GLY and v_G3PDH for
    vars GLY and GLY;
  enddef;
  def map between ETOH and v_ADH for
    vars ETOH and ETOH;
  enddef;
enddef;
