def model michailova_2005 as
  // Modeling regulation of cardiac KATP and L-type Ca2+ currents by ATP, ADP, and Mg2+
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and OpenCell to recreate the published results. The units have been checked and they are consistent. We thank the original model author Anushka Michailova for providing us with the MATLAB code for the 2001 model on which this 2005 model is based. Please note when running a simultaion the step size has to be smaller than 0.005 seconds.
  //
  // Model Structure
  //
  // ABSTRACT: Changes in cytosolic free Mg(2+) and adenosine nucleotide phosphates affect cardiac excitability and contractility. To investigate how modulation by Mg(2+), ATP, and ADP of K(ATP) and L-type Ca(2+) channels influences excitation-contraction coupling, we incorporated equations for intracellular ATP and MgADP regulation of the K(ATP) current and MgATP regulation of the L-type Ca(2+) current in an ionic-metabolic model of the canine ventricular myocyte. The new model: 1), quantitatively reproduces a dose-response relationship for the effects of changes in ATP on K(ATP) current, 2), simulates effects of ADP in modulating ATP sensitivity of K(ATP) channel, 3), predicts activation of Ca(2+) current during rapid increase in MgATP, and 4), demonstrates that decreased ATP/ADP ratio with normal total Mg(2+) or increased free Mg(2+) with normal ATP and ADP activate K(ATP) current, shorten action potential, and alter ionic currents and intracellular Ca(2+) signals. The model predictions are in agreement with experimental data measured under normal and a variety of pathological conditions.
  //
  // Schematic representation of Kir6.2 and SUR2A subunit stoichiometry in cardiac octameric KATP channel. It is assumed that the single ATP molecule is sufficient to close the channel and that the binding of 2MgADP molecules to one SUR2A subunit increases the channel open probability.
  //
  // Schematic diagram of the full cell model illustrating Ca2+ and Mg2+ buffering and transport by ATP and ADP, adenine nucleotides regulation of ionic channels and pumps, and electrophysiology in a ventricular myocyte.
  //
  // The original paper reference is cited below:
  //
  // Modeling Regulation of Cardiac KATP and L-type Ca2+ Currents by ATP, ADP, and Mg2+, Anushka Michailova, Jeffrey Saucerman, Mary Ellen Belik, and Andrew D. McCulloch, 2005, Biophysical Journal. PubMed ID: 18339738 (http://www.ncbi.nlm.nih.gov/pubmed/15738467)
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit second_per_millisecond as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microA_second_per_cm3 as
    unit ampere {pref: micro};
    unit second;
    unit metre {expo: -3, pref: centi};
  enddef;
  def unit nA_microA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: micro};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar3_per_second as
    unit millimolar {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit millimolar4_per_second as
    unit millimolar {expo: -4};
    unit second {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit cm_per_farad_second as
    unit metre {pref: centi};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0042391
  def comp membrane as
    var V: millivolt {init: -96.1638, pub: out};
    var R: joule_per_mole_kelvin {init: 8.314472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_millimole {init: 96.4853415, pub: out};
    var C_sc: microF_per_cm2 {init: 0.001, pub: out};
    var i_Stim: microA_per_microF {pub: out};
    var time: second {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var i_Ca: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var i_Ca_K: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_to1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var i_K1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_Kp: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var i_p_Ca: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Ca_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Na_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var i_K_ATP: microA_per_microF {pub: in};
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 100000000};
    var stim_period: second {init: 1};
    var stim_duration: second {init: 0.0005};
    var stim_amplitude: microA_per_microF {init: -100.0};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    ode(V, time) = -1{microF_per_cm2}*1{nA_microA}*(i_Na+i_Ca+i_Ca_K+i_Kr+i_Ks+i_to1+i_K1+i_Kp+i_NaCa+i_NaK+i_p_Ca+i_Na_b+i_Ca_b+i_K_ATP+i_Stim)/C_sc;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38634
    var E_Na: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_Na: milliS_per_microF {init: 12.8};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var j: dimensionless {priv: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_m_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {init: 0.0328302, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_m: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_m: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E0_m: millivolt;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_m = V+47.13{millivolt};
    alpha_m = sel
      case abs(E0_m) < 0.00001{millivolt}:
        320{per_second}/(0.1{dimensionless}-0.005{per_millivolt}*E0_m);
      otherwise:
        320{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 80{per_second}*exp(-V/11{millivolt});
    ode(m, time) = sel
      case V >= -90{millivolt}:
        alpha_m*(1{dimensionless}-m)-beta_m*m;
      otherwise:
        0{per_second};
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_h_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {init: 0.988354, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_h: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_h: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        135{per_second}*exp((80{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0{per_second};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3560{per_second}*exp(0.079{per_millivolt}*V)+310000{per_second}*exp(0.35{per_millivolt}*V);
      otherwise:
        1000{dimensionless}/(0.13{second}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_j_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var j: dimensionless {init: 0.99254, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_j: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_j: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        1000{dimensionless}*(-(127140{per_millivolt_second}*exp(0.2444{per_millivolt}*V)+0.00003474{per_millivolt_second}*exp(-0.04391{per_millivolt}*V)))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_second};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        121.2{per_second}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        300{per_second}*exp(-0.0000002535{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    ode(j, time) = alpha_j*(1{dimensionless}-j)-beta_j*j;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_activating_delayed_rectifiyer_K_current as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_K: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_Kr: milliS_per_microF {init: 0.0034};
    var f_K_o: dimensionless;
    var R_V: dimensionless;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var X_kr: dimensionless {priv: in};
    E_K = R*T/F*ln(K_o/K_i);
    f_K_o = sqrt(K_o/4{millimolar});
    R_V = 1{dimensionless}/(1{dimensionless}+1.4945{dimensionless}*exp(0.0446{per_millivolt}*V));
    i_Kr = g_Kr*f_K_o*R_V*X_kr*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var X_kr: dimensionless {init: 0.51, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var K12: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var K21: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var X_kr_inf: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var tau_X_kr: second;
    var tau_factor: dimensionless {init: 1};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    K12 = exp(-5.495{dimensionless}+0.1691{per_millivolt}*V);
    K21 = exp(-7.677{dimensionless}-0.0128{per_millivolt}*V);
    X_kr_inf = K12/(K12+K21);
    tau_X_kr = 0.001{second}/(K12+K21)+tau_factor*0.027{second};
    ode(X_kr, time) = (X_kr_inf-X_kr)/tau_X_kr;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp slow_activating_delayed_rectifiyer_K_current as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_Ks: milliS_per_microF {init: 0.0027134};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_Ks: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var X_ks: dimensionless {priv: in};
    E_Ks = R*T/F*ln((K_o+0.01833{dimensionless}*Na_o)/(K_i+0.01833{dimensionless}*Na_i));
    i_Ks = g_Ks*sqr(X_ks)*(V-E_Ks);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate as
    // isVersionOf: http://identifiers.org//
    var X_ks: dimensionless {init: 0.264, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var tau_X_ks: second;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var X_ks_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    X_ks_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-24.7{millivolt})/13.6{millivolt}));
    tau_X_ks = 0.001{second}/(0.0000719{per_millivolt}*(V-10{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V-10{millivolt})))+0.000131{per_millivolt}*(V-10{millivolt})/(exp(0.0687{per_millivolt}*(V-10{millivolt}))-1{dimensionless}));
    ode(X_ks, time) = (X_ks_infinity-X_ks)/tau_X_ks;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_to1: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var g_to1: milliS_per_microF {init: 0.23815};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_to1: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_to1: dimensionless {priv: in};
    i_to1 = g_to1*X_to1*Y_to1*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_potassium_current_X_to1_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_to1: dimensionless {init: 2.63, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alpha_X_to1: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var beta_X_to1: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_X_to1 = 45.16{per_second}*exp(0.03577{per_millivolt}*V);
    beta_X_to1 = 98.9{per_second}*exp(-0.06237{per_millivolt}*V);
    ode(X_to1, time) = alpha_X_to1*(1{dimensionless}-X_to1)-beta_X_to1*X_to1;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_potassium_current_Y_to1_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_to1: dimensionless {init: 0.99, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alpha_Y_to1: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var beta_Y_to1: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_Y_to1 = 5.415{per_second}*exp(-(V+33.5{millivolt})/5{millivolt})/(1{dimensionless}+0.051335{dimensionless}*exp(-(V+33.5{millivolt})/5{millivolt}));
    beta_Y_to1 = 5.415{per_second}*exp((V+33.5{millivolt})/5{millivolt})/(1{dimensionless}+0.051335{dimensionless}*exp((V+33.5{millivolt})/5{millivolt}));
    ode(Y_to1, time) = alpha_Y_to1*(1{dimensionless}-Y_to1)-beta_Y_to1*Y_to1;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005242
  // isVersionOf: http://identifiers.org/go/GO:0005241
  def comp time_independent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var i_K1: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var g_K1: milliS_per_microF {init: 2.8};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var K_mK1: millimolar {init: 13};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_mole_kelvin {priv: out, pub: in};
    var T: kelvin {priv: out, pub: in};
    var F: coulomb_per_millimole {priv: out, pub: in};
    var E_K: millivolt {priv: out, pub: in};
    var K_o: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var K1_infinity_V: dimensionless {priv: in};
    i_K1 = g_K1*K1_infinity_V*K_o/(K_o+K_mK1)*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005242
  // isVersionOf: http://identifiers.org/go/GO:0005241
  def comp time_independent_potassium_current_K1_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var K1_infinity_V: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E_K: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    K1_infinity_V = 1{dimensionless}/(2{dimensionless}+exp(1.5{dimensionless}*F/(R*T)*(V-E_K)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp plateau_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_Kp: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var g_Kp: milliS_per_microF {init: 0.002216};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var Kp_V: dimensionless {priv: in};
    i_Kp = g_Kp*Kp_V*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp plateau_potassium_current_Kp_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var Kp_V: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    Kp_V = 1{dimensionless}/(1{dimensionless}+exp((7.488{millivolt}-V)/5.98{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp Na_Ca_exchanger as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var K_mCa: millimolar {init: 1.38};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var K_mNa: millimolar {init: 87.5};
    var K_NaCa: microA_per_microF {init: 0.3};
    var K_sat: dimensionless {init: 0.2};
    var eta: dimensionless {init: 0.35};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    i_NaCa = K_NaCa*5000{dimensionless}/((pow(K_mNa, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(K_mCa+Ca_o)*(1{dimensionless}+K_sat*exp((eta-1{dimensionless})*V*F/(R*T))))*(exp(eta*V*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i);
  enddef;

  // isVersionOf: http://identifiers.org//
  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0006815
  def comp sodium_potassium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var I_NaK: microA_per_microF {init: 0.693};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var f_NaK: dimensionless;
    var K_mNa_i: millimolar {init: 10};
    var K_mK_o: millimolar {init: 1.5};
    var sigma: dimensionless;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Na_o/67.3{millimolar})-1{dimensionless});
    i_NaK = I_NaK*f_NaK/(1{dimensionless}+pow(K_mNa_i/Na_i, 1.5{dimensionless}))*K_o/(K_o+K_mK_o);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0015085
  // isVersionOf: http://identifiers.org/go/GO:0006816
  def comp sarcolemmal_calcium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var i_p_Ca: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var i_p_Ca_winslow: microA_per_microF;
    var K_mpCa: millimolar {init: 0.00005};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var I_pCa: microA_per_microF {init: 0.05};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var MgATP_i: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var MgATP_i0: millimolar {pub: in};
    i_p_Ca = MgATP_i/MgATP_i0*i_p_Ca_winslow;
    i_p_Ca_winslow = I_pCa*Ca_i/(K_mpCa+Ca_i);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp calcium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Ca_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_Cab: milliS_per_microF {init: 0.0003842};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var E_Ca: millivolt;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp sodium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Na_b: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_Nab: milliS_per_microF {init: 0.0031};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/chebi/CHEBI:38215
  def comp L_type_Ca_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var i_Ca: microA_per_microF {pub: out};
    var i_Ca_K: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var P_Ca: cm_per_second {init: 3.594e-4};
    var p_prime_k: cm_per_second {init: 6.658e-7};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var f_Ca: dimensionless;
    var P_rom: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var k_MgATP_ss: millimolar {init: 1.4};
    var alpha: per_second;
    var beta: per_second;
    var gamma: per_second;
    var v_gamma: per_second;
    var alpha_prime: per_second;
    var beta_prime: per_second;
    var a: dimensionless {init: 2};
    var b: dimensionless {init: 2};
    var g: per_second {init: 2000};
    var f: per_second {init: 300};
    var v_omega: per_second;
    var omega: per_second {init: 10};
    var x: dimensionless;
    var z: dimensionless {init: 0.1};
    var v: dimensionless {init: 0.1};
    var w: dimensionless {init: 0.1};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var C_sc: microF_per_cm2 {pub: in};
    var Ca_ss: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var MgATP_ss: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var y: dimensionless {priv: in};
    i_Ca = f_Ca*(P_Ca/(1{second_per_millisecond}*C_sc))*(4{dimensionless}*V*sqr(F)/(R*T))*((0.001{millimolar}*exp(F*V/(R*T))-0.34{dimensionless}*Ca_o)/(exp(F*V/(R*T))-1.0{dimensionless}))*P_rom;
    i_Ca_K = 1.0{microA_second_per_cm3}*f_Ca*(p_prime_k/C_sc)*P_rom;
    ode(v, time) = alpha*(1{dimensionless}-v)-beta*v;
    ode(w, time) = alpha_prime*(1{dimensionless}-w)-beta_prime*w;
    x = f/(f+g);
    ode(z, time) = v_omega*(1{dimensionless}-z)-v_gamma*z;
    alpha = 400{per_second}*exp((V+2{millivolt})/10{millivolt});
    beta = 50{per_second}*exp(-(V+2{millivolt})/13{millivolt});
    alpha_prime = alpha*a;
    beta_prime = beta/b;
    gamma = 103.75{per_second}*Ca_ss/1{millimolar};
    P_rom = pow(v, 4{dimensionless})*y*z*(f/(f+g));
    f_Ca = 1{dimensionless}/(1{dimensionless}+pow(k_MgATP_ss/MgATP_ss, 2.6{dimensionless}));
    v_omega = omega*(pow(b, -0{dimensionless})*pow(w, 0{dimensionless})*pow(1{dimensionless}-w, 4{dimensionless}-0{dimensionless})+pow(b, -1{dimensionless})*pow(w, 1{dimensionless})*pow(1{dimensionless}-w, 4{dimensionless}-1{dimensionless})+pow(b, -2{dimensionless})*sqr(w)*pow(1{dimensionless}-w, 4{dimensionless}-2{dimensionless})+pow(b, -3{dimensionless})*pow(w, 3{dimensionless})*pow(1{dimensionless}-w, 4{dimensionless}-3{dimensionless})+pow(b, -4{dimensionless})*pow(w, 4{dimensionless})*pow(1{dimensionless}-w, 4{dimensionless}-4{dimensionless}));
    v_gamma = gamma*(pow(a, 0{dimensionless})*pow(v, 0{dimensionless})*pow(1{dimensionless}-v, 4{dimensionless}-0{dimensionless})+pow(a, 1{dimensionless})*pow(v, 1{dimensionless})*pow(1{dimensionless}-v, 4{dimensionless}-1{dimensionless})+sqr(a)*sqr(v)*pow(1{dimensionless}-v, 4{dimensionless}-2{dimensionless})+pow(a, 3{dimensionless})*pow(v, 3{dimensionless})*pow(1{dimensionless}-v, 4{dimensionless}-3{dimensionless})+pow(a, 4{dimensionless})*pow(v, 4{dimensionless})*pow(1{dimensionless}-v, 4{dimensionless}-4{dimensionless})+(-(pow(a, 4{dimensionless})*pow(v, 4{dimensionless})*x)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005245
  def comp L_type_Ca_current_y_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var y: dimensionless {init: 0.798, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var y_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var tau_y: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    y_infinity = 0.8{dimensionless}/(1{dimensionless}+exp((V+12.5{millivolt})/5{millivolt}))+0.2{dimensionless};
    tau_y = (20{second}+600{second}/(1{dimensionless}+exp((V+20{millivolt})/9.5{millivolt})))/1000{dimensionless};
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0008282
  def comp ATP_sensitive_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var i_K_ATP: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var g_K_ATP: milliS_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var G_K_ATP: milliS_per_microF {init: 0.05};
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var f_K_ATP: dimensionless;
    var f_ATP: dimensionless;
    var k_ATP: millimolar {init: 0.6};
    var k_MgADP: millimolar {init: 0.4};
    var K_o_normal: millimolar {init: 4.5};
    var f_MgADP_: dimensionless;
    var f_MgADP: dimensionless;
    var c_MgADP: dimensionless;
    var go: dimensionless {init: 0.08};
    var gd: dimensionless {init: 0.89};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var ATP_i: millimolar {pub: in};
    var MgADP_i: millimolar {pub: in};
    var time: second {pub: in};
    i_K_ATP = g_K_ATP*(V-E_K);
    g_K_ATP = G_K_ATP*f_K_ATP*pow(K_o/K_o_normal, 0.24{dimensionless});
    f_ATP = pow(1.0{dimensionless}-ATP_i/(ATP_i+k_ATP), 4{dimensionless});
    f_MgADP_ = sqr(MgADP_i/(MgADP_i+k_MgADP));
    c_MgADP = 1{dimensionless}-f_MgADP_;
    f_MgADP = 1{dimensionless}-pow(c_MgADP, 4{dimensionless});
    f_K_ATP = go*f_ATP*(1{dimensionless}-f_MgADP)+gd*f_ATP*f_MgADP;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005219
  // isVersionOf: http://identifiers.org/fma/FMA:62492
  def comp RyR_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005219
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var J_rel: millimolar_per_second {pub: out};
    var v1: per_second {init: 1800};
    var k_a_plus: millimolar4_per_second {init: 1.215e13};
    var k_a_minus: per_second {init: 576};
    var k_b_plus: millimolar3_per_second {init: 4.05e9};
    var k_b_minus: per_second {init: 1930};
    var k_c_plus: per_second {init: 100};
    var k_c_minus: per_second {init: 0.8};
    var P_O1: dimensionless {init: 0};
    var P_O2: dimensionless {init: 0};
    var P_C1: dimensionless {init: 0.47};
    var P_C2: dimensionless {init: 0.53};
    var n: dimensionless {init: 4};
    var m: dimensionless {init: 3};
    var time: second {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    ode(P_C1, time) = -k_a_plus*pow(Ca_ss, n)*P_C1+k_a_minus*P_O1;
    ode(P_O1, time) = k_a_plus*pow(Ca_ss, n)*P_C1-(k_a_minus*P_O1+k_b_plus*pow(Ca_ss, m)*P_O1+k_c_plus*P_O1)+k_b_minus*P_O2+k_c_minus*P_C2;
    ode(P_O2, time) = k_b_plus*pow(Ca_ss, m)*P_O1-k_b_minus*P_O2;
    ode(P_C2, time) = k_c_plus*P_O1-k_c_minus*P_C2;
    J_rel = v1*(P_O1+P_O2)*(Ca_JSR-Ca_ss);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0070296
  // isVersionOf: http://identifiers.org/go/GO:0051208
  def comp SERCA2a_pump as
    // isVersionOf: http://identifiers.org/go/GO:0070296
    // isVersionOf: http://identifiers.org/go/GO:0051208
    var J_up: millimolar_per_second {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0070296
    // isVersionOf: http://identifiers.org/go/GO:0051208
    var J_up_winslow: millimolar_per_second;
    var K_fb: millimolar {init: 0.000168};
    var K_rb: millimolar {init: 3.29};
    var fb: dimensionless;
    var rb: dimensionless;
    var Vmaxf: millimolar_per_second {init: 0.0813};
    var Vmaxr: millimolar_per_second {init: 0.318};
    var K_SR: dimensionless {init: 1};
    var N_fb: dimensionless {init: 1.2};
    var N_rb: dimensionless {init: 1};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var MgATP_i: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var MgATP_i0: millimolar {pub: in};
    fb = pow(Ca_i/K_fb, N_fb);
    rb = pow(Ca_NSR/K_rb, N_rb);
    J_up = MgATP_i/MgATP_i0*J_up_winslow;
    J_up_winslow = K_SR*(Vmaxf*fb-Vmaxr*rb)/(1{dimensionless}+fb+rb);
  enddef;

  def comp intracellular_Ca_fluxes as
    var J_tr: millimolar_per_second {pub: out};
    var J_xfer: millimolar_per_second {pub: out};
    var J_trpn: millimolar_per_second {pub: out};
    var tau_tr: second {init: 0.0005747};
    var tau_xfer: second {init: 0.0267};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var HTRPNCa: millimolar {init: 0.98};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var LTRPNCa: millimolar {init: 0.078};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var J_HTRPNCa: millimolar_per_second;
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var J_LTRPNCa: millimolar_per_second;
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var HTRPN_tot: dimensionless {init: 0.14};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var LTRPN_tot: dimensionless {init: 0.07};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var k_htrpn_plus: per_millimolar_second {init: 20000};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var k_htrpn_minus: per_second {init: 0.066};
    // isVersionOf: http://identifiers.org//
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var k_ltrpn_plus: per_millimolar_second {init: 40000};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var k_ltrpn_minus: per_second {init: 40};
    var time: second {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_NSR: millimolar {pub: in};
    var Ca_JSR: millimolar {pub: in};
    J_tr = (Ca_NSR-Ca_JSR)/tau_tr;
    J_xfer = (Ca_ss-Ca_i)/tau_xfer;
    J_trpn = HTRPN_tot*J_HTRPNCa+LTRPN_tot*J_LTRPNCa;
    J_HTRPNCa = ode(HTRPNCa, time);
    ode(HTRPNCa, time) = k_htrpn_plus*Ca_i*(1{millimolar}-HTRPNCa)-k_htrpn_minus*HTRPNCa;
    J_LTRPNCa = ode(LTRPNCa, time);
    ode(LTRPNCa, time) = k_ltrpn_plus*Ca_i*(1{millimolar}-LTRPNCa)-k_ltrpn_minus*LTRPNCa;
  enddef;

  def comp intracellular_ion_concentrations as
    var Na_i: millimolar {init: 10, pub: out};
    var Ca_i: millimolar {init: 8.464E-5, pub: out};
    var K_i: millimolar {init: 159.48, pub: out};
    var Ca_ss: millimolar {init: 1.315E-4, pub: out};
    var Ca_JSR: millimolar {init: 0.2616, pub: out};
    var Ca_NSR: millimolar {init: 0.2620, pub: out};
    var A_cap: cm2 {init: 0.0001534};
    var V_myo: microlitre {init: 0.00002584};
    var V_JSR: microlitre {init: 0.00000016};
    var V_NSR: microlitre {init: 0.0000021};
    var V_ss: microlitre {init: 0.0000000012};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var K_mCMDN: millimolar {init: 0.00238};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30741
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30740
    var K_mEGTA: millimolar {init: 0.00015};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var K_mCSQN: millimolar {init: 0.8};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var CMDN_tot: millimolar {init: 0.05};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30741
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30740
    var EGTA_tot: millimolar {init: 0};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var CSQN_tot: millimolar {init: 15};
    var beta_i: dimensionless;
    var beta_SS: dimensionless;
    var beta_JSR: dimensionless;
    var time: second {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var C_sc: microF_per_cm2 {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Na: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var i_Ca: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Na_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var i_Ca_K: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005228
    var i_K1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_Kp: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_to1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005245
    var i_p_Ca: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_Ca_b: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var i_K_ATP: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0070296
    // isVersionOf: http://identifiers.org/go/GO:0051208
    var J_up: millimolar_per_second {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005219
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var J_rel: millimolar_per_second {pub: in};
    var J_xfer: millimolar_per_second {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var J_trpn: millimolar_per_second {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var J_tr: millimolar_per_second {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005388
    var k_plus_CaATP: per_millimolar_second {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005388
    var k_minus_CaATP: per_second {pub: in};
    var k_plus_CaADP: per_millimolar_second {pub: in};
    var k_minus_CaADP: per_second {pub: in};
    var CaADP_i: millimolar {pub: in};
    var CaADP_ss: millimolar {pub: in};
    var CaATP_ss: millimolar {pub: in};
    var ATP_i: millimolar {pub: in};
    var ADP_i: millimolar {pub: in};
    var ADP_ss: millimolar {pub: in};
    var ATP_ss: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005388
    var CaATP_i: millimolar {pub: in};
    ode(Ca_i, time) = beta_i*(J_xfer-(J_up+J_trpn)+(-((i_p_Ca+i_Ca_b-2{dimensionless}*i_NaCa)*(A_cap*C_sc/(2{dimensionless}*V_myo*F))))+k_minus_CaATP*CaATP_i+k_minus_CaADP*CaADP_i-(k_plus_CaATP*Ca_i*ATP_i+k_plus_CaADP*Ca_i*ADP_i));
    ode(Na_i, time) = -0{dimensionless}*(i_Na+i_Na_b+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless})*A_cap*1{microF_per_cm2}/(V_myo*F);
    ode(K_i, time) = -0{dimensionless}*(i_Ca_K+i_Kr+i_Ks+i_K1+i_Kp+i_to1+i_K_ATP+i_NaK*(-2{dimensionless}))*A_cap*1{microF_per_cm2}/(V_myo*F);
    beta_i = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_i)+EGTA_tot*K_mEGTA/sqr(K_mEGTA+Ca_i));
    beta_SS = 1{dimensionless}/(1{dimensionless}+CMDN_tot*K_mCMDN/sqr(K_mCMDN+Ca_ss)+EGTA_tot*K_mEGTA/sqr(K_mEGTA+Ca_ss));
    beta_JSR = 1{dimensionless}/(1{dimensionless}+CSQN_tot*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
    ode(Ca_ss, time) = beta_SS*(J_rel*V_JSR/V_ss+k_minus_CaATP*CaATP_ss+k_minus_CaADP*CaADP_ss-(J_xfer*V_myo/V_ss+i_Ca*(A_cap*1{microF_per_cm2}/(2{dimensionless}*V_ss*F))+k_plus_CaATP*Ca_ss*ATP_ss+k_plus_CaADP*Ca_ss*ADP_ss));
    ode(Ca_JSR, time) = beta_JSR*(J_tr-J_rel);
    ode(Ca_NSR, time) = J_up*V_myo/V_NSR-J_tr*V_JSR/V_NSR;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0015444
  // isVersionOf: http://identifiers.org/go/GO:0005388
  def comp Ca_and_Mg_buffering_by_ATP as
    // isVersionOf: http://identifiers.org/go/GO:0015434
    var CaATP_ss: millimolar {init: 0.25E-3, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_ss: millimolar {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var MgATP_i: millimolar {init: 6.4395, pub: out};
    var MgADP_i: millimolar {init: 0.298E-2, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var MgATP_i0: millimolar {init: 2.888, pub: out};
    var k_plus_CaATP: per_millimolar_second {init: 225000.0, pub: out};
    var k_minus_CaATP: per_second {init: 45000.0, pub: out};
    var k_plus_CaADP: per_millimolar_second {init: 125000.0, pub: out};
    var k_minus_CaADP: per_second {init: 193500, pub: out};
    var CaADP_i: millimolar {init: 0.11E-6, pub: out};
    var CaADP_ss: millimolar {init: 0.13E-6, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_i: millimolar {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_i: millimolar {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_ss: millimolar {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0015434
    var CaATP_i: millimolar {init: 0.237E-3, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var MgATP_ss: millimolar {init: 6.4395, pub: out};
    var Mg_ss: millimolar {init: 1.0};
    var Mg_i: millimolar {init: 1.0};
    var MgADP_ss: millimolar {init: 0.298E-2};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_tot: millimolar {init: 7.0};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var k_plus_MgATP: per_millimolar_second {init: 125000.0};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var k_minus_MgATP: per_second {init: 10875.0};
    var Jxfer_CaATP: millimolar_per_second;
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var Jxfer_MgATP: millimolar_per_second;
    var Jxfer_Mg: millimolar_per_second;
    var tau_xfer_CaATP: second {init: 0.0534};
    // isVersionOf: http://identifiers.org/go/GO:0015444
    var tau_xfer_MgATP: second {init: 0.0534};
    var tau_xfer_Mg: second {init: 0.0267};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_tot: millimolar {init: 0.005};
    var k_plus_MgADP: per_millimolar_second {init: 125000.0};
    var k_minus_MgADP: per_second {init: 84500.0};
    var Jxfer_CaADP: millimolar_per_second;
    var Jxfer_MgADP: millimolar_per_second;
    var tau_xfer_CaADP: second {init: 0.0534};
    var tau_xfer_MgADP: second {init: 0.0534};
    var time: second {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var V_myo: microlitre {pub: in};
    var V_ss: microlitre {pub: in};
    ATP_ss = ATP_tot-(CaATP_ss+MgATP_ss);
    ode(CaATP_ss, time) = k_plus_CaATP*Ca_ss*ATP_ss-(Jxfer_CaATP*(V_myo/V_ss)+k_minus_CaATP*CaATP_ss);
    ode(MgATP_ss, time) = k_plus_MgATP*Mg_ss*ATP_ss-(Jxfer_MgATP*(V_myo/V_ss)+k_minus_MgATP*MgATP_ss);
    ATP_i = ATP_tot-(CaATP_i+MgATP_i);
    ode(CaATP_i, time) = Jxfer_CaATP+k_plus_CaATP*Ca_i*ATP_i-k_minus_CaATP*CaATP_i;
    ode(MgATP_i, time) = Jxfer_MgATP+k_plus_MgATP*Mg_i*ATP_i-k_minus_MgATP*MgATP_i;
    Jxfer_CaATP = (CaATP_ss-CaATP_i)/tau_xfer_CaATP;
    Jxfer_MgATP = (MgATP_ss-MgATP_i)/tau_xfer_MgATP;
    ADP_ss = ADP_tot-(CaADP_ss+MgADP_ss);
    ode(CaADP_ss, time) = k_plus_CaADP*Ca_ss*ADP_ss-(Jxfer_CaADP*(V_myo/V_ss)+k_minus_CaADP*CaADP_ss);
    ode(MgADP_ss, time) = k_plus_MgADP*Mg_ss*ADP_ss-(Jxfer_MgADP*(V_myo/V_ss)+k_minus_MgADP*MgADP_ss);
    ADP_i = ADP_tot-(CaADP_i+MgADP_i);
    ode(CaADP_i, time) = Jxfer_CaADP+k_plus_CaADP*Ca_i*ADP_i-k_minus_CaADP*CaADP_i;
    ode(MgADP_i, time) = Jxfer_MgADP+k_plus_MgADP*Mg_i*ADP_i-k_minus_MgADP*MgADP_i;
    Jxfer_CaADP = (CaADP_ss-CaADP_i)/tau_xfer_CaADP;
    Jxfer_MgADP = (MgADP_ss-MgADP_i)/tau_xfer_MgADP;
    ode(Mg_ss, time) = k_minus_MgATP*MgATP_ss+k_minus_MgADP*MgADP_ss-(k_plus_MgATP*Mg_ss*ATP_ss+k_plus_MgADP*Mg_ss*ADP_ss+Jxfer_Mg*(V_myo/V_ss));
    ode(Mg_i, time) = Jxfer_Mg+k_minus_MgATP*MgATP_i+k_minus_MgADP*MgADP_i-(k_plus_MgATP*Mg_i*ATP_i+k_plus_MgADP*Mg_i*ADP_i);
    Jxfer_Mg = (Mg_ss-Mg_i)/tau_xfer_Mg;
  enddef;

  def comp extracellular_ion_concentrations as
    var Na_o: millimolar {init: 138, pub: out};
    var Ca_o: millimolar {init: 2, pub: out};
    var K_o: millimolar {init: 4, pub: out};
  enddef;

  def comp model_parameters as
    var V_myo: microlitre {init: 0.00002584, pub: out};
    var V_ss: microlitre {init: 0.0000000012, pub: out};
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp rapid_activating_delayed_rectifiyer_K_current incl
      comp rapid_activating_delayed_rectifiyer_K_current_X_kr_gate;
    endcomp;
    comp slow_activating_delayed_rectifiyer_K_current incl
      comp slow_activating_delayed_rectifiyer_K_current_X_ks_gate;
    endcomp;
    comp transient_outward_potassium_current incl
      comp transient_outward_potassium_current_X_to1_gate;
      comp transient_outward_potassium_current_Y_to1_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
    comp plateau_potassium_current incl
      comp plateau_potassium_current_Kp_gate;
    endcomp;
    comp L_type_Ca_current incl
      comp L_type_Ca_current_y_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and environment for
    vars time and time;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between ATP_sensitive_potassium_current and environment for
    vars time and time;
  enddef;
  def map between RyR_channel and environment for
    vars time and time;
  enddef;
  def map between SERCA2a_pump and environment for
    vars time and time;
  enddef;
  def map between intracellular_Ca_fluxes and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and environment for
    vars time and time;
  enddef;
  def map between membrane and ATP_sensitive_potassium_current for
    vars V and V;
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and rapid_activating_delayed_rectifiyer_K_current for
    vars V and V;
    vars i_Kr and i_Kr;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and slow_activating_delayed_rectifiyer_K_current for
    vars V and V;
    vars i_Ks and i_Ks;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and transient_outward_potassium_current for
    vars V and V;
    vars i_to1 and i_to1;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and L_type_Ca_current for
    vars V and V;
    vars i_Ca and i_Ca;
    vars i_Ca_K and i_Ca_K;
    vars R and R;
    vars T and T;
    vars F and F;
    vars C_sc and C_sc;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
    vars C_sc and C_sc;
  enddef;
  def map between fast_sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and extracellular_ion_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between intracellular_ion_concentrations and rapid_activating_delayed_rectifiyer_K_current for
    vars i_Kr and i_Kr;
    vars K_i and K_i;
  enddef;
  def map between extracellular_ion_concentrations and rapid_activating_delayed_rectifiyer_K_current for
    vars K_o and K_o;
  enddef;
  def map between transient_outward_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between time_independent_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between plateau_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between ATP_sensitive_potassium_current and rapid_activating_delayed_rectifiyer_K_current for
    vars E_K and E_K;
  enddef;
  def map between extracellular_ion_concentrations and ATP_sensitive_potassium_current for
    vars K_o and K_o;
  enddef;
  def map between intracellular_ion_concentrations and slow_activating_delayed_rectifiyer_K_current for
    vars i_Ks and i_Ks;
    vars K_i and K_i;
    vars Na_i and Na_i;
  enddef;
  def map between extracellular_ion_concentrations and slow_activating_delayed_rectifiyer_K_current for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between transient_outward_potassium_current and intracellular_ion_concentrations for
    vars i_to1 and i_to1;
  enddef;
  def map between time_independent_potassium_current and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
  enddef;
  def map between time_independent_potassium_current and extracellular_ion_concentrations for
    vars K_o and K_o;
  enddef;
  def map between plateau_potassium_current and intracellular_ion_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between Na_Ca_exchanger and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_exchanger and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between sodium_potassium_pump and extracellular_ion_concentrations for
    vars Na_o and Na_o;
    vars K_o and K_o;
  enddef;
  def map between sarcolemmal_calcium_pump and intracellular_ion_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Ca_i and Ca_i;
  enddef;
  def map between calcium_background_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between calcium_background_current and extracellular_ion_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between sodium_background_current and intracellular_ion_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between L_type_Ca_current and intracellular_ion_concentrations for
    vars i_Ca_K and i_Ca_K;
    vars i_Ca and i_Ca;
    vars K_i and K_i;
    vars Ca_ss and Ca_ss;
  enddef;
  def map between L_type_Ca_current and extracellular_ion_concentrations for
    vars K_o and K_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between RyR_channel and intracellular_ion_concentrations for
    vars J_rel and J_rel;
    vars Ca_ss and Ca_ss;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between SERCA2a_pump and intracellular_ion_concentrations for
    vars J_up and J_up;
    vars Ca_i and Ca_i;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between intracellular_Ca_fluxes and intracellular_ion_concentrations for
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
    vars J_trpn and J_trpn;
    vars Ca_i and Ca_i;
    vars Ca_NSR and Ca_NSR;
    vars Ca_ss and Ca_ss;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and ATP_sensitive_potassium_current for
    vars ATP_i and ATP_i;
    vars MgADP_i and MgADP_i;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and L_type_Ca_current for
    vars MgATP_ss and MgATP_ss;
  enddef;
  def map between ATP_sensitive_potassium_current and intracellular_ion_concentrations for
    vars i_K_ATP and i_K_ATP;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and sarcolemmal_calcium_pump for
    vars MgATP_i and MgATP_i;
    vars MgATP_i0 and MgATP_i0;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and SERCA2a_pump for
    vars MgATP_i and MgATP_i;
    vars MgATP_i0 and MgATP_i0;
  enddef;
  def map between model_parameters and Ca_and_Mg_buffering_by_ATP for
    vars V_myo and V_myo;
    vars V_ss and V_ss;
  enddef;
  def map between Ca_and_Mg_buffering_by_ATP and intracellular_ion_concentrations for
    vars CaATP_ss and CaATP_ss;
    vars CaATP_i and CaATP_i;
    vars CaADP_ss and CaADP_ss;
    vars CaADP_i and CaADP_i;
    vars Ca_ss and Ca_ss;
    vars Ca_i and Ca_i;
    vars ATP_ss and ATP_ss;
    vars ATP_i and ATP_i;
    vars ADP_ss and ADP_ss;
    vars ADP_i and ADP_i;
    vars k_plus_CaATP and k_plus_CaATP;
    vars k_minus_CaATP and k_minus_CaATP;
    vars k_plus_CaADP and k_plus_CaADP;
    vars k_minus_CaADP and k_minus_CaADP;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_activating_delayed_rectifiyer_K_current and rapid_activating_delayed_rectifiyer_K_current_X_kr_gate for
    vars X_kr and X_kr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_activating_delayed_rectifiyer_K_current and slow_activating_delayed_rectifiyer_K_current_X_ks_gate for
    vars X_ks and X_ks;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_X_to1_gate for
    vars X_to1 and X_to1;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_potassium_current and transient_outward_potassium_current_Y_to1_gate for
    vars Y_to1 and Y_to1;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars time and time;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars E_K and E_K;
    vars K1_infinity_V and K1_infinity_V;
  enddef;
  def map between plateau_potassium_current and plateau_potassium_current_Kp_gate for
    vars Kp_V and Kp_V;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
enddef;
