// This CellML file was generated on 13/10/2009 at 9:44:46 at a.m. using:
//
// COR (0.9.31.1319)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// -
// -
// -
// -
// -
// creator: - Nunns Geoffrey Rogan - gnunns1@jhu.edu - The University of Auckland Auckland Bioengineering Institute; http://imc.org/vCard/3.0#internet
// created: W3CDTF 2009-10-08
// -
// -
// -
// -
// -
// -
// title: The Iancu et al. 2007 model of compartmentalized cAMP signaling in cardiac myocytes
// comment: This is the CellML description of Iancu et al.'s mathematical model of compartmentalized cAMP signaling in cardiac myocytes - - Geoffrey Nunns
// species: Human
// bio_entity: ventricular myocyte
// reference: - keyword - - signal transduction cardiac
// reference: 17293406 - - - - - - Iancu Radu V - - - Jones Stephen W - - - Harvey Robert D - Compartmentation of cAMP signaling in cardiac myocytes: a computational study - 2007-05-01 - Biophysical Journal 92 3317 3331
def model iancu_jones_harvey_2007 as
  def unit uM as
    unit mole {pref: micro};
    unit liter {expo: -1};
  enddef;
  def unit per_uM as
    unit uM {expo: -1};
  enddef;
  def unit per_sec as
    unit second {expo: -1};
  enddef;
  def unit uM_per_sec as
    unit uM;
    unit second {expo: -1};
  enddef;
  def unit per_uM_per_sec as
    unit uM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit liters_per_second as
    unit liter;
    unit second {expo: -1};
  enddef;
  def unit kDa as
    unit gram {pref: kilo};
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp beta_1_adrenergic_parameters as
    var L_iso: uM {pub: out};
    var K_H: uM {init: 0.035, pub: out};
    var K_L: uM {init: 0.386, pub: out};
    var K_C: uM {init: 8.809, pub: out};
    var time: second {pub: in};
    L_iso = sel
      case (time > 120{second}) and (time <= 720{second}):
        1{uM};
      otherwise:
        1{uM};
    endsel;
  enddef;

  def comp muscarinic_parameters as
    var L_ach: uM {pub: out};
    var K_H: uM {init: 0.16, pub: out};
    var K_L: uM {init: 11, pub: out};
    var K_C: uM {init: 30, pub: out};
    var time: second {pub: in};
    L_ach = sel
      case (time > 240{second}) and (time <= 540{second}):
        0{uM};
      otherwise:
        0{uM};
    endsel;
  enddef;

  def comp PDE_parameters as
    var k_PDE2: per_sec {init: 20, pub: out};
    var Km_PDE2: uM {init: 50, pub: out};
    var k_PDE3: per_sec {init: 1.25, pub: out};
    var Km_PDE3: uM {init: 0.08, pub: out};
    var k_PDE4: per_sec {init: 2.5, pub: out};
    var Km_PDE4: uM {init: 2.2, pub: out};
  enddef;

  def comp G_s_parameters as
    var k_act1: per_sec {init: 5, pub: out};
    var k_act2: per_sec {init: 0.1, pub: out};
    var k_hydr: per_sec {init: 0.8, pub: out};
    var k_reas: per_uM_per_sec {init: 1.21e3, pub: out};
  enddef;

  def comp G_i_parameters as
    var k_act1: per_sec {init: 2.5, pub: out};
    var k_act2: per_sec {init: 0.05, pub: out};
    var k_hydr: per_sec {init: 0.8, pub: out};
    var k_reas: per_uM_per_sec {init: 1.21e3, pub: out};
  enddef;

  def comp caveolar_beta_1_adrenergic_receptor_module as
    var R: uM;
    var LR: uM;
    var LRG: uM {pub: out};
    var RG: uM {pub: out};
    var R_Total: uM {init: 0.633};
    var G: uM {pub: in};
    var L_iso: uM {pub: in};
    var K_H: uM {pub: in};
    var K_L: uM {pub: in};
    var K_C: uM {pub: in};
    R = R_Total-LR-LRG-RG;
    LR = L_iso*R/K_L;
    LRG = L_iso*R*G/(K_H*K_C/K_L);
    RG = R*G/K_C;
  enddef;

  def comp caveolar_muscarinic_receptor_module as
    var R: uM;
    var LR: uM;
    var LRG: uM {pub: out};
    var RG: uM {pub: out};
    var R_Total: uM {init: 0.633};
    var G: uM {pub: in};
    var L_ach: uM {pub: in};
    var K_H: uM {pub: in};
    var K_L: uM {pub: in};
    var K_C: uM {pub: in};
    R = R_Total-LR-LRG-RG;
    LR = L_ach*R/K_L;
    LRG = L_ach*R*G/(K_H*K_C/K_L);
    RG = R*G/K_C;
  enddef;

  def comp caveolar_G_s_protein_activation_module as
    var Gs_alpha_GTP: uM {init: 0.041983438, pub: out};
    var Gs_beta_gamma: uM {init: 0.042634499, pub: out};
    var Gs_alpha_GDP: uM {init: 0.000651061, pub: out};
    var Gs_alpha_beta_gamma: uM {pub: out};
    var Gs_Total: uM {init: 10, pub: out};
    var time: second {pub: in};
    var RG: uM {pub: in};
    var LRG: uM {pub: in};
    var k_act1: per_sec {pub: in};
    var k_act2: per_sec {pub: in};
    var k_hydr: per_sec {pub: in};
    var k_reas: per_uM_per_sec {pub: in};
    ode(Gs_alpha_GTP, time) = RG*k_act2+LRG*k_act1-Gs_alpha_GTP*k_hydr;
    ode(Gs_beta_gamma, time) = RG*k_act2+LRG*k_act1-Gs_alpha_GDP*Gs_beta_gamma*k_reas;
    ode(Gs_alpha_GDP, time) = Gs_alpha_GTP*k_hydr-Gs_alpha_GDP*Gs_beta_gamma*k_reas;
    Gs_alpha_beta_gamma = Gs_Total-Gs_alpha_GTP-Gs_alpha_GDP;
  enddef;

  def comp caveolar_G_i_protein_activation_module as
    var Gi_alpha_GTP: uM {init: 0.012644961, pub: out};
    var Gi_beta_gamma: uM {init: 0.013274751, pub: out};
    var Gi_alpha_GDP: uM {init: 0.00062979, pub: out};
    var Gi_alpha_beta_gamma: uM {pub: out};
    var Gi_Total: uM {init: 20, pub: out};
    var time: second {pub: in};
    var RG: uM {pub: in};
    var LRG: uM {pub: in};
    var k_act1: per_sec {pub: in};
    var k_act2: per_sec {pub: in};
    var k_hydr: per_sec {pub: in};
    var k_reas: per_uM_per_sec {pub: in};
    ode(Gi_alpha_GTP, time) = RG*k_act2+LRG*k_act1-Gi_alpha_GTP*k_hydr;
    ode(Gi_beta_gamma, time) = RG*k_act2+LRG*k_act1-Gi_alpha_GDP*Gi_beta_gamma*k_reas;
    ode(Gi_alpha_GDP, time) = Gi_alpha_GTP*k_hydr-Gi_alpha_GDP*Gi_beta_gamma*k_reas;
    Gi_alpha_beta_gamma = Gi_Total-Gi_alpha_GTP-Gi_alpha_GDP;
  enddef;

  def comp extracaveolar_beta_1_adrenergic_receptor_module as
    var R: uM;
    var LR: uM;
    var LRG: uM {pub: out};
    var RG: uM {pub: out};
    var R_Total: uM {init: 0.633};
    var G: uM {pub: in};
    var L_iso: uM {pub: in};
    var K_H: uM {pub: in};
    var K_L: uM {pub: in};
    var K_C: uM {pub: in};
    R = R_Total-LR-LRG-RG;
    LR = L_iso*R/K_L;
    LRG = L_iso*R*G/(K_H*K_C/K_L);
    RG = R*G/K_C;
  enddef;

  def comp extracaveolar_muscarinic_receptor_module as
    var R: uM;
    var LR: uM;
    var LRG: uM {pub: out};
    var RG: uM {pub: out};
    var R_Total: uM {init: 0.633};
    var G: uM {pub: in};
    var L_ach: uM {pub: in};
    var K_H: uM {pub: in};
    var K_L: uM {pub: in};
    var K_C: uM {pub: in};
    R = R_Total-LR-LRG-RG;
    LR = L_ach*R/K_L;
    LRG = L_ach*R*G/(K_H*K_C/K_L);
    RG = R*G/K_C;
  enddef;

  def comp extracaveolar_G_s_protein_activation_module as
    var Gs_alpha_GTP: uM {init: 0.083866891, pub: out};
    var Gs_beta_gamma: uM {init: 0.084522918, pub: out};
    var Gs_alpha_GDP: uM {init: 0.000656025, pub: out};
    var Gs_alpha_beta_gamma: uM {pub: out};
    var Gs_Total: uM {init: 10, pub: out};
    var time: second {pub: in};
    var RG: uM {pub: in};
    var LRG: uM {pub: in};
    var k_act1: per_sec {pub: in};
    var k_act2: per_sec {pub: in};
    var k_hydr: per_sec {pub: in};
    var k_reas: per_uM_per_sec {pub: in};
    ode(Gs_alpha_GTP, time) = RG*k_act2+LRG*k_act1-Gs_alpha_GTP*k_hydr;
    ode(Gs_beta_gamma, time) = RG*k_act2+LRG*k_act1-Gs_alpha_GDP*Gs_beta_gamma*k_reas;
    ode(Gs_alpha_GDP, time) = Gs_alpha_GTP*k_hydr-Gs_alpha_GDP*Gs_beta_gamma*k_reas;
    Gs_alpha_beta_gamma = Gs_Total-Gs_alpha_GTP-Gs_alpha_GDP;
  enddef;

  def comp extracaveolar_G_i_protein_activation_module as
    var Gi_alpha_GTP: uM {init: 0.001018705, pub: out};
    var Gi_beta_gamma: uM {init: 0.001475253, pub: out};
    var Gi_alpha_GDP: uM {init: 0.000456548, pub: out};
    var Gi_alpha_beta_gamma: uM {pub: out};
    var Gi_Total: uM {init: 1, pub: out};
    var time: second {pub: in};
    var RG: uM {pub: in};
    var LRG: uM {pub: in};
    var k_act1: per_sec {pub: in};
    var k_act2: per_sec {pub: in};
    var k_hydr: per_sec {pub: in};
    var k_reas: per_uM_per_sec {pub: in};
    ode(Gi_alpha_GTP, time) = RG*k_act2+LRG*k_act1-Gi_alpha_GTP*k_hydr;
    ode(Gi_beta_gamma, time) = RG*k_act2+LRG*k_act1-Gi_alpha_GDP*Gi_beta_gamma*k_reas;
    ode(Gi_alpha_GDP, time) = Gi_alpha_GTP*k_hydr-Gi_alpha_GDP*Gi_beta_gamma*k_reas;
    Gi_alpha_beta_gamma = Gi_Total-Gi_alpha_GTP-Gi_alpha_GDP;
  enddef;

  def comp AC56_module as
    var dcAMP_AC_56_dt: uM_per_sec {pub: out};
    var Gs_alpha_GTP: uM {pub: in};
    var Gi_alpha_GTP: uM {pub: in};
    var k_AC56: per_sec;
    var AC_56: uM {init: 3.379};
    var AF56: dimensionless {init: 500};
    var MW_AC56: kDa {init: 130};
    var ATP: uM {init: 5000};
    var Km_ATP: uM {init: 315};
    k_AC56 = (0.7{dimensionless}+3.8234{dimensionless}*pow(Gs_alpha_GTP/1{uM}, 0.9787{dimensionless})/(0.1986{dimensionless}+pow(Gs_alpha_GTP/1{uM}, 0.9787{dimensionless})))*(1{dimensionless}+1{dimensionless}/1.4432{dimensionless}*(-1.0061{dimensionless})*pow(Gi_alpha_GTP/1{uM}, 0.8356{dimensionless})/(0.1918{dimensionless}+pow(Gi_alpha_GTP/1{uM}, 0.8356{dimensionless})))*MW_AC56/60{kDa}*0.001{per_sec};
    dcAMP_AC_56_dt = k_AC56*AC_56*AF56*ATP/(Km_ATP+ATP);
  enddef;

  def comp AC47_ecav_module as
    var dcAMP_AC_47_ecav_dt: uM_per_sec {pub: out};
    var Gs_alpha_GTP: uM {pub: in};
    var Gi_beta_gamma: uM {pub: in};
    var k_AC47_ecav: per_sec;
    var AC_47_ecav: uM {init: 0.2};
    var AF47: dimensionless {init: 130};
    var MW_AC47: kDa {init: 130};
    var ATP: uM {init: 5000};
    var Km_ATP: uM {init: 315};
    k_AC47_ecav = (0.063{dimensionless}+2.01{dimensionless}*pow(Gs_alpha_GTP*1000{per_uM}, 1.0043{dimensionless})/(31.544{dimensionless}+pow(Gs_alpha_GTP*1000{per_uM}, 1.0043{dimensionless})))*(1{dimensionless}+1{dimensionless}/3.01{dimensionless}*49.1{dimensionless}*pow(Gi_beta_gamma*1000{per_uM}, 0.8921{dimensionless})/(25.44{dimensionless}+pow(Gi_beta_gamma*1000{per_uM}, 0.8921{dimensionless})))*MW_AC47/60{kDa}*0.001{per_sec};
    dcAMP_AC_47_ecav_dt = k_AC47_ecav*AC_47_ecav*AF47*ATP/(Km_ATP+ATP);
  enddef;

  def comp AC47_cyt_module as
    var dcAMP_AC_47_cyt_dt: uM_per_sec {pub: out};
    var k_AC47_cyt: per_sec {init: 1.08e-3};
    var AC_47_cyt: uM {init: 0.136};
    var AF47: dimensionless {init: 130};
    var ATP: uM {init: 5000};
    var Km_ATP: uM {init: 315};
    dcAMP_AC_47_cyt_dt = k_AC47_cyt*AC_47_cyt*AF47*ATP/(Km_ATP+ATP);
  enddef;

  def comp caveolar_PDE_module as
    var dcAMP_cav_PDE2_dt: uM_per_sec {pub: out};
    var dcAMP_cav_PDE3_dt: uM_per_sec {pub: out};
    var dcAMP_cav_PDE4_dt: uM_per_sec {pub: out};
    var cAMP_cav: uM {pub: in};
    var PDE2: uM {init: 4.5};
    var k_PDE2: per_sec {pub: in};
    var Km_PDE2: uM {pub: in};
    var PDE3: uM {init: 5.6};
    var k_PDE3: per_sec {pub: in};
    var Km_PDE3: uM {pub: in};
    var PDE4: uM {init: 2};
    var k_PDE4: per_sec {pub: in};
    var Km_PDE4: uM {pub: in};
    dcAMP_cav_PDE2_dt = k_PDE2*PDE2*cAMP_cav/(Km_PDE2+cAMP_cav);
    dcAMP_cav_PDE3_dt = k_PDE3*PDE3*cAMP_cav/(Km_PDE3+cAMP_cav);
    dcAMP_cav_PDE4_dt = k_PDE4*PDE4*cAMP_cav/(Km_PDE4+cAMP_cav);
  enddef;

  def comp extracaveolar_PDE_module as
    var dcAMP_ecav_PDE2_dt: uM_per_sec {pub: out};
    var dcAMP_ecav_PDE4_dt: uM_per_sec {pub: out};
    var cAMP_ecav: uM {pub: in};
    var PDE2: uM {init: 0.02};
    var k_PDE2: per_sec {pub: in};
    var Km_PDE2: uM {pub: in};
    var PDE4: uM {init: 0.16};
    var k_PDE4: per_sec {pub: in};
    var Km_PDE4: uM {pub: in};
    dcAMP_ecav_PDE2_dt = k_PDE2*PDE2*cAMP_ecav/(Km_PDE2+cAMP_ecav);
    dcAMP_ecav_PDE4_dt = k_PDE4*PDE4*cAMP_ecav/(Km_PDE4+cAMP_ecav);
  enddef;

  def comp bulk_cytoplasmic_PDE_module as
    var dcAMP_cyt_PDE2_dt: uM_per_sec {pub: out};
    var dcAMP_cyt_PDE3_dt: uM_per_sec {pub: out};
    var dcAMP_cyt_PDE4_dt: uM_per_sec {pub: out};
    var cAMP_cyt: uM {pub: in};
    var PDE2: uM {init: 5e-3};
    var k_PDE2: per_sec {pub: in};
    var Km_PDE2: uM {pub: in};
    var PDE3: uM {init: 7.5e-3};
    var k_PDE3: per_sec {pub: in};
    var Km_PDE3: uM {pub: in};
    var PDE4: uM {init: 5e-3};
    var k_PDE4: per_sec {pub: in};
    var Km_PDE4: uM {pub: in};
    dcAMP_cyt_PDE2_dt = k_PDE2*PDE2*cAMP_cyt/(Km_PDE2+cAMP_cyt);
    dcAMP_cyt_PDE3_dt = k_PDE3*PDE3*cAMP_cyt/(Km_PDE3+cAMP_cyt);
    dcAMP_cyt_PDE4_dt = k_PDE4*PDE4*cAMP_cyt/(Km_PDE4+cAMP_cyt);
  enddef;

  def comp cAMP_flux_module as
    var cAMP_cav: uM {init: 0.11750433, pub: out};
    var cAMP_ecav: uM {init: 1.092200547, pub: out};
    var cAMP_cyt: uM {init: 0.992583576, pub: out};
    var time: second {pub: in};
    var V_cav: liter;
    var V_ecav: liter;
    var V_cyt: liter;
    var V_cell: liter {init: 38e-12};
    var J_cav_ecav: liters_per_second {init: 7.5e-15};
    var J_cav_cyt: liters_per_second {init: 7.5e-14};
    var J_ecav_cyt: liters_per_second {init: 1.5e-17};
    var dcAMP_AC_56_dt: uM_per_sec {pub: in};
    var dcAMP_AC_47_ecav_dt: uM_per_sec {pub: in};
    var dcAMP_AC_47_cyt_dt: uM_per_sec {pub: in};
    var dcAMP_cav_PDE2_dt: uM_per_sec {pub: in};
    var dcAMP_cav_PDE3_dt: uM_per_sec {pub: in};
    var dcAMP_cav_PDE4_dt: uM_per_sec {pub: in};
    var dcAMP_ecav_PDE2_dt: uM_per_sec {pub: in};
    var dcAMP_ecav_PDE4_dt: uM_per_sec {pub: in};
    var dcAMP_cyt_PDE2_dt: uM_per_sec {pub: in};
    var dcAMP_cyt_PDE3_dt: uM_per_sec {pub: in};
    var dcAMP_cyt_PDE4_dt: uM_per_sec {pub: in};
    V_cav = 0.01{dimensionless}*V_cell;
    V_ecav = 0.02{dimensionless}*V_cell;
    V_cyt = 0.5{dimensionless}*V_cell;
    ode(cAMP_cav, time) = dcAMP_AC_56_dt-(dcAMP_cav_PDE2_dt+dcAMP_cav_PDE3_dt+dcAMP_cav_PDE4_dt)-J_cav_ecav*(cAMP_cav-cAMP_ecav)/V_cav-J_cav_cyt*(cAMP_cav-cAMP_cyt)/V_cav;
    ode(cAMP_ecav, time) = dcAMP_AC_47_ecav_dt-(dcAMP_ecav_PDE2_dt+dcAMP_ecav_PDE4_dt)+J_cav_ecav*(cAMP_cav-cAMP_ecav)/V_ecav-J_ecav_cyt*(cAMP_ecav-cAMP_cyt)/V_ecav;
    ode(cAMP_cyt, time) = dcAMP_AC_47_cyt_dt-(dcAMP_cyt_PDE2_dt+dcAMP_cyt_PDE3_dt+dcAMP_cyt_PDE4_dt)+J_cav_cyt*(cAMP_cav-cAMP_cyt)/V_cyt+J_ecav_cyt*(cAMP_ecav-cAMP_cyt)/V_cyt;
  enddef;
  def map between environment and beta_1_adrenergic_parameters for
    vars time and time;
  enddef;
  def map between environment and muscarinic_parameters for
    vars time and time;
  enddef;
  def map between environment and caveolar_G_s_protein_activation_module for
    vars time and time;
  enddef;
  def map between environment and caveolar_G_i_protein_activation_module for
    vars time and time;
  enddef;
  def map between environment and extracaveolar_G_s_protein_activation_module for
    vars time and time;
  enddef;
  def map between environment and extracaveolar_G_i_protein_activation_module for
    vars time and time;
  enddef;
  def map between environment and cAMP_flux_module for
    vars time and time;
  enddef;
  def map between beta_1_adrenergic_parameters and caveolar_beta_1_adrenergic_receptor_module for
    vars L_iso and L_iso;
    vars K_H and K_H;
    vars K_L and K_L;
    vars K_C and K_C;
  enddef;
  def map between muscarinic_parameters and caveolar_muscarinic_receptor_module for
    vars L_ach and L_ach;
    vars K_H and K_H;
    vars K_L and K_L;
    vars K_C and K_C;
  enddef;
  def map between beta_1_adrenergic_parameters and extracaveolar_beta_1_adrenergic_receptor_module for
    vars L_iso and L_iso;
    vars K_H and K_H;
    vars K_L and K_L;
    vars K_C and K_C;
  enddef;
  def map between muscarinic_parameters and extracaveolar_muscarinic_receptor_module for
    vars L_ach and L_ach;
    vars K_H and K_H;
    vars K_L and K_L;
    vars K_C and K_C;
  enddef;
  def map between caveolar_G_s_protein_activation_module and AC56_module for
    vars Gs_alpha_GTP and Gs_alpha_GTP;
  enddef;
  def map between caveolar_G_i_protein_activation_module and AC56_module for
    vars Gi_alpha_GTP and Gi_alpha_GTP;
  enddef;
  def map between extracaveolar_G_s_protein_activation_module and AC47_ecav_module for
    vars Gs_alpha_GTP and Gs_alpha_GTP;
  enddef;
  def map between extracaveolar_G_i_protein_activation_module and AC47_ecav_module for
    vars Gi_beta_gamma and Gi_beta_gamma;
  enddef;
  def map between PDE_parameters and caveolar_PDE_module for
    vars k_PDE2 and k_PDE2;
    vars Km_PDE2 and Km_PDE2;
    vars k_PDE3 and k_PDE3;
    vars Km_PDE3 and Km_PDE3;
    vars k_PDE4 and k_PDE4;
    vars Km_PDE4 and Km_PDE4;
  enddef;
  def map between PDE_parameters and extracaveolar_PDE_module for
    vars k_PDE2 and k_PDE2;
    vars Km_PDE2 and Km_PDE2;
    vars k_PDE4 and k_PDE4;
    vars Km_PDE4 and Km_PDE4;
  enddef;
  def map between PDE_parameters and bulk_cytoplasmic_PDE_module for
    vars k_PDE2 and k_PDE2;
    vars Km_PDE2 and Km_PDE2;
    vars k_PDE3 and k_PDE3;
    vars Km_PDE3 and Km_PDE3;
    vars k_PDE4 and k_PDE4;
    vars Km_PDE4 and Km_PDE4;
  enddef;
  def map between G_s_parameters and caveolar_G_s_protein_activation_module for
    vars k_act1 and k_act1;
    vars k_act2 and k_act2;
    vars k_hydr and k_hydr;
    vars k_reas and k_reas;
  enddef;
  def map between G_i_parameters and caveolar_G_i_protein_activation_module for
    vars k_act1 and k_act1;
    vars k_act2 and k_act2;
    vars k_hydr and k_hydr;
    vars k_reas and k_reas;
  enddef;
  def map between G_s_parameters and extracaveolar_G_s_protein_activation_module for
    vars k_act1 and k_act1;
    vars k_act2 and k_act2;
    vars k_hydr and k_hydr;
    vars k_reas and k_reas;
  enddef;
  def map between G_i_parameters and extracaveolar_G_i_protein_activation_module for
    vars k_act1 and k_act1;
    vars k_act2 and k_act2;
    vars k_hydr and k_hydr;
    vars k_reas and k_reas;
  enddef;
  def map between caveolar_beta_1_adrenergic_receptor_module and caveolar_G_s_protein_activation_module for
    vars G and Gs_alpha_beta_gamma;
    vars RG and RG;
    vars LRG and LRG;
  enddef;
  def map between caveolar_muscarinic_receptor_module and caveolar_G_i_protein_activation_module for
    vars G and Gi_alpha_beta_gamma;
    vars RG and RG;
    vars LRG and LRG;
  enddef;
  def map between extracaveolar_beta_1_adrenergic_receptor_module and extracaveolar_G_s_protein_activation_module for
    vars G and Gs_alpha_beta_gamma;
    vars RG and RG;
    vars LRG and LRG;
  enddef;
  def map between extracaveolar_muscarinic_receptor_module and extracaveolar_G_i_protein_activation_module for
    vars G and Gi_alpha_beta_gamma;
    vars RG and RG;
    vars LRG and LRG;
  enddef;
  def map between AC56_module and cAMP_flux_module for
    vars dcAMP_AC_56_dt and dcAMP_AC_56_dt;
  enddef;
  def map between AC47_ecav_module and cAMP_flux_module for
    vars dcAMP_AC_47_ecav_dt and dcAMP_AC_47_ecav_dt;
  enddef;
  def map between AC47_cyt_module and cAMP_flux_module for
    vars dcAMP_AC_47_cyt_dt and dcAMP_AC_47_cyt_dt;
  enddef;
  def map between caveolar_PDE_module and cAMP_flux_module for
    vars dcAMP_cav_PDE2_dt and dcAMP_cav_PDE2_dt;
    vars dcAMP_cav_PDE3_dt and dcAMP_cav_PDE3_dt;
    vars dcAMP_cav_PDE4_dt and dcAMP_cav_PDE4_dt;
    vars cAMP_cav and cAMP_cav;
  enddef;
  def map between extracaveolar_PDE_module and cAMP_flux_module for
    vars dcAMP_ecav_PDE2_dt and dcAMP_ecav_PDE2_dt;
    vars dcAMP_ecav_PDE4_dt and dcAMP_ecav_PDE4_dt;
    vars cAMP_ecav and cAMP_ecav;
  enddef;
  def map between bulk_cytoplasmic_PDE_module and cAMP_flux_module for
    vars dcAMP_cyt_PDE2_dt and dcAMP_cyt_PDE2_dt;
    vars dcAMP_cyt_PDE3_dt and dcAMP_cyt_PDE3_dt;
    vars dcAMP_cyt_PDE4_dt and dcAMP_cyt_PDE4_dt;
    vars cAMP_cyt and cAMP_cyt;
  enddef;
  // Compartmentation of cAMP signaling in cardiac myocytes: a computational study
  //
  // Geoffrey Nunns
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model does not run in COR due to the presence of DAEs, but runs in PCEnv and OpenCell to reproduce the published results. The CellML model has been based on the published paper and later corrections.
  //
  // Model Structure
  //
  // ABSTRACT: Receptor-mediated changes in cAMP production play an essential role in sympathetic and parasympathetic regulation of the electrical, mechanical, and metabolic activity of cardiac myocytes. However, responses to receptor activation cannot be easily ascribed to a uniform increase or decrease in cAMP activity throughout the entire cell. In this study, we used a computational approach to test the hypothesis that in cardiac ventricular myocytes the effects of beta(1)-adrenergic receptor (beta(1)AR) and M(2) muscarinic receptor (M(2)R) activation involve compartmentation of cAMP. A model consisting of two submembrane (caveolar and extracaveolar) microdomains and one bulk cytosolic domain was created using published information on the location of beta(1)ARs and M(2)Rs, as well as the location of stimulatory (G(s)) and inhibitory (G(i)) G-proteins, adenylyl cyclase isoforms inhibited (AC5/6) and stimulated (AC4/7) by G(i), and multiple phosphodiesterase isoforms (PDE2, PDE3, and PDE4). Results obtained with the model indicate that: 1), bulk basal cAMP can be high ( approximately 1 microM) and only modestly stimulated by beta(1)AR activation ( approximately 2 microM), but caveolar cAMP varies in a range more appropriate for regulation of protein kinase A ( approximately 100 nM to approximately 2 microM); 2), M(2)R activation strongly reduces the beta(1)AR-induced increases in caveolar cAMP, with less effect on bulk cAMP; and 3), during weak beta(1)AR stimulation, M(2)R activation not only reduces caveolar cAMP, but also produces a rebound increase in caveolar cAMP following termination of M(2)R activity. We conclude that compartmentation of cAMP can provide a quantitative explanation for several aspects of cardiac signaling.
  //
  // The original paper reference is cited below:
  //
  // Compartmentation of cAMP signaling in cardiac myocytes: a computational study, Radu V. Iancu, Stephen W. Jones, Robert D. Harvey, 2007, Biophysical Journal, volume 92, 3317-3331. PubMed ID: 17293406 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=17293406&query_hl=1&itool=pubmed_docsum)
  //
  // model diagram
  //
  // A schematic diagram of the signalling pathway.
  //
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  //
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  //
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  //
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  //
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "aslanidi_2009", which is
  // declared on the <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  // Keyword(s)
  // -
  // -
  // -
  // -
enddef;
