<?xml version="1.0" encoding="utf-8"?>
<!--  FILE :  mazhari_model_2001_version02.xml

CREATED :  23rd May 2007

LAST MODIFIED : 23rd May 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Mazhari et al's model of the molecular interactions between two long-QT syndrome gene products, HERG and KCNE2.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="mazhari_model_2001_version02" name="mazhari_greenstein_winslow_marban_nuss_2001_version01">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Modelling HERG-KCNE2 Functional Interaction</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
The protein products of the genes <emphasis>HERG</emphasis> and <emphasis>KCNE2</emphasis> form the subunits of the rapid delayed rectifier potassium channel (I<subscript>K,r</subscript>).  Mutations in KCNE2 have been associated with acquired long-QT syndrome and ventricular fibrillation, whilst mutations in the <emphasis>HERG</emphasis> gene have been associated with the inherited form of the disease.  The mechansisms underlying the <emphasis>KCNE</emphasis> mutation-induced cardiac arrhythmias are not clear.  An improved understanding of the functional interactions between the two gene products could facilitate the development of superior therapeutic approaches for particular lesions in either HERG or KCNE2.
</para>

<para>
In the study described here, Mazhari <emphasis>et al.</emphasis> characterise the functional effects of KCNE2 coexpression with HERG.  They develop a Markov state model of both HERG and HERG-KCNE2 coassembly (see <xref linkend="fig_reaction_diagram"/> below), and use this model to elucidate mechanisms of interaction.  In addition, ion channel gating models provide a quantitative description of gating behaviour and they provide clues to channel strcture.  In order to predict the consequences of HERG-KCNE2 interactions for action potential repolarisation, the Markov state model was embedded within the <ulink url="${HTML_EXMPL_W_MODEL}">Winslow <emphasis>et al.</emphasis> Canine Ventricular Cell Model, 1999</ulink>. 
</para>

<para>
The model has been described here in CellML (the raw CellML description of the Mazhari <emphasis>et al.</emphasis> 2001 model can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>).     
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
Molecular Interactions Between Two Long-QT Syndrome Gene Products, <emphasis>HERG</emphasis> and <emphasis>KCNE2</emphasis>, Rationalized by In Vitro and In Silico Analysis, Reza Mazhari, Joseph L. Greenstein, Raimond L. Winslow, Eduardo Marban, and H. Bradley Nuss, 2001, <emphasis>Circulation Research</emphasis>, 89, 33-38.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11440975&amp;dopt=Abstract">PubMed ID: 11440975</ulink>
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction diagram</title>
    </objectinfo>
    <imagedata fileref="mazhari_2001.png"/>
  </imageobject>
</mediaobject>
<caption>State diagram of the HERG and HERG+hKCNE2 Marcov model. C<subscript>1</subscript>, C<subscript>2</subscript>, and C<subscript>3</subscript> are closed states.  O is the open state, and I is the inactivated state.</caption>
</informalfigure>

<para>
While coexpression of HERG and KCNE2 alters both the kinetics and density of the ionic current, including these effects in the Winslow <emphasis>et al.</emphasis> action potential model predicts that only changes in current density significantly affect repolarisation.  Therefore the main functional consequence of KCNE2 on action potential morphology is through modulation of I<subscript>K,r</subscript> density.  The mutations associated with long-QT syndrome that result in only modest changes of gating kinetics may be an epiphenomena or alternatively, they may modulate action potential repoalrisation via interactions with alternative pore-forming potassium channel alpha subunits. 
</para>

</sect1>
</article>
</documentation>

  
  
  
  
  <units name="millivolt">
    <unit units="volt" prefix="milli"/>
  </units>
  
  <units name="micromolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit units="micromolar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  
  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>
  
  <component name="membrane">
    <variable units="millivolt" public_interface="out" name="Vm" initial_value="-80.0"/>
  </component>
  
  <component name="C1" cmeta:id="C1">
     
    <variable units="dimensionless" public_interface="out" name="C1"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="alpha_0"/>
    <variable units="first_order_rate_constant" public_interface="in" name="beta_0"/>
    <variable units="dimensionless" public_interface="in" name="C2"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C1 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <times/>  
            <ci> beta_0 </ci>
            <ci> C2 </ci>
          </apply>
          <apply>
            <times/>
            <ci> alpha_0 </ci>
            <ci> C1 </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="C2" cmeta:id="C2">
     
    <variable units="dimensionless" public_interface="out" name="C2"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="alpha_0"/>
    <variable units="first_order_rate_constant" public_interface="in" name="beta_0"/>
    <variable units="first_order_rate_constant" public_interface="in" name="Kf"/>
    <variable units="first_order_rate_constant" public_interface="in" name="Kb"/>
    <variable units="dimensionless" public_interface="in" name="C1"/>
    <variable units="dimensionless" public_interface="in" name="C3"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C2 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> alpha_0 </ci>
              <ci> C1 </ci>
            </apply>
            <apply>
              <times/>
              <ci> Kb </ci>
              <ci> C3 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> beta_0 </ci>
              <ci> C2 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> Kf </ci>
              <ci> C2 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="C3" cmeta:id="C3">
     
    <variable units="dimensionless" public_interface="out" name="C3"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="alpha_1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="beta_1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="alpha_i3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="psi"/>
    <variable units="first_order_rate_constant" public_interface="in" name="Kf"/>
    <variable units="first_order_rate_constant" public_interface="in" name="Kb"/>
    <variable units="dimensionless" public_interface="in" name="C2"/>
    <variable units="dimensionless" public_interface="in" name="I"/>
    <variable units="dimensionless" public_interface="in" name="O"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> C3 </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> beta_1 </ci>
              <ci> O </ci>
            </apply>
            <apply>
              <times/>
              <ci> Kf </ci>
              <ci> C2 </ci>
            </apply>
            <apply>
              <times/>
              <ci> psi </ci>
              <ci> I </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> alpha_i3 </ci>
              <ci> C3 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> alpha_1 </ci>
              <ci> C3 </ci>
            </apply>
            <apply>
              <times/>  
              <ci> Kb </ci>
              <ci> C3 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="O" cmeta:id="O">
     
    <variable units="micromolar" public_interface="out" name="O"/>
    
    <variable units="first_order_rate_constant" public_interface="in" name="alpha_1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="beta_1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="alpha_i"/>
    <variable units="first_order_rate_constant" public_interface="in" name="beta_i"/>
    <variable units="dimensionless" public_interface="in" name="I"/>
    <variable units="dimensionless" public_interface="in" name="C3"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> O </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> alpha_1 </ci>
              <ci> C3 </ci>
            </apply>
            <apply>
              <times/>
              <ci> beta_i </ci>
              <ci> I </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> beta_1 </ci>
              <ci> O </ci>
            </apply>
            <apply>
              <times/>  
              <ci> alpha_i </ci>
              <ci> O </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
  
  <component name="I" cmeta:id="I">
     
    <variable units="micromolar" public_interface="out" name="I"/> 
    
    <variable units="first_order_rate_constant" public_interface="in" name="alpha_i3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="psi"/>
    <variable units="first_order_rate_constant" public_interface="in" name="alpha_i"/>
    <variable units="first_order_rate_constant" public_interface="in" name="beta_i"/>
    <variable units="dimensionless" public_interface="in" name="O"/>
    <variable units="dimensionless" public_interface="in" name="C3"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> I </ci> 
        </apply>
        <apply>
          <minus/> 
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> alpha_i </ci>
              <ci> O </ci>
            </apply>
            <apply>
              <times/>
              <ci> alpha_i3 </ci>
              <ci> C3 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>  
              <ci> beta_i </ci>
              <ci> I </ci>
            </apply>
            <apply>
              <times/>  
              <ci> psi </ci>
              <ci> I </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
 
  
  <component name="reaction_constants">
    <variable units="first_order_rate_constant" public_interface="out" name="alpha_0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="beta_0"/>
    <variable units="first_order_rate_constant" public_interface="out" name="Kf" initial_value="0.0266"/>
    <variable units="first_order_rate_constant" public_interface="out" name="Kb" initial_value="0.1348"/>
    <variable units="first_order_rate_constant" name="alpha_i3"/>
    <variable units="first_order_rate_constant" public_interface="out" name="alpha_i"/>
    <variable units="first_order_rate_constant" public_interface="out" name="alpha_1"/>
    <variable units="first_order_rate_constant" public_interface="out" name="beta_i"/>
    <variable units="first_order_rate_constant" public_interface="out" name="beta_1"/>
    <variable units="first_order_rate_constant" public_interface="out" name="psi"/>
    
    <variable units="millivolt" public_interface="in" name="Vm"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="psi_calculation">
        <eq/>
        <ci> psi </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> beta_1 </ci>
            <ci> beta_i </ci>
            <ci> alpha_i3 </ci>
          </apply>
          <apply>
            <times/>
            <ci> alpha_1 </ci>
            <ci> alpha_i </ci>
          </apply>
        </apply>
      </apply>

      <apply id="beta_0_calculation">
        <eq/>
        <ci> beta_0 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 0.0227 </cn>
          <apply>
            <exp/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> -0.0431 </cn>
              <ci> Vm </ci>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="alpha_0_calculation">
        <eq/>
        <ci> alpha_0 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 0.0069 </cn>
          <apply>
            <exp/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 0.0272 </cn>
              <ci> Vm </ci>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="beta_1_calculation">
        <eq/>
        <ci> beta_1 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 0.0009 </cn>
          <apply>
            <exp/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> -0.0269 </cn>
              <ci> Vm </ci>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="alpha_1_calculation">
        <eq/>
        <ci> alpha_1 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 0.0218 </cn>
          <apply>
            <exp/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 0.0262 </cn>
              <ci> Vm </ci>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="beta_i_calculation">
        <eq/>
        <ci> beta_i </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 0.0059 </cn>
          <apply>
            <exp/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> -0.0443 </cn>
              <ci> Vm </ci>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="alpha_i_calculation">
        <eq/>
        <ci> alpha_i </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 0.0622 </cn>
          <apply>
            <exp/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless"> 0.0120 </cn>
              <ci> Vm </ci>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="alpha_i3_calculation">
        <eq/>
        <ci> alpha_i3 </ci>
        <apply>
          <times/>
          <cn type="e-notation" cellml:units="first_order_rate_constant">1.29<sep/>-5</cn>
          <apply>
            <exp/>
            <apply>
              <times/>
              <cn type="e-notation" cellml:units="dimensionless">2.71<sep/>-6</cn>
              <ci> Vm </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  
  <connection>
    <map_components component_2="environment" component_1="C1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="C2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="C3"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="O"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="I"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="membrane" component_1="reaction_constants"/>
    <map_variables variable_2="Vm" variable_1="Vm"/>
  </connection>
  
  <connection>
    <map_components component_2="C2" component_1="C1"/>
    <map_variables variable_2="C1" variable_1="C1"/>
    <map_variables variable_2="C2" variable_1="C2"/>
  </connection>
  
  <connection>
    <map_components component_2="C3" component_1="C2"/>
    <map_variables variable_2="C2" variable_1="C2"/>
    <map_variables variable_2="C3" variable_1="C3"/>
  </connection>
  
  <connection>
    <map_components component_2="O" component_1="C3"/>
    <map_variables variable_2="C3" variable_1="C3"/>
    <map_variables variable_2="O" variable_1="O"/>
  </connection>
  
  <connection>
    <map_components component_2="I" component_1="C3"/>
    <map_variables variable_2="C3" variable_1="C3"/>
    <map_variables variable_2="I" variable_1="I"/>
  </connection>
  
  <connection>
    <map_components component_2="I" component_1="O"/>
    <map_variables variable_2="O" variable_1="O"/>
    <map_variables variable_2="I" variable_1="I"/>
  </connection>
  
  <connection>
    <map_components component_2="reaction_constants" component_1="C1"/>
    <map_variables variable_2="alpha_0" variable_1="alpha_0"/>
    <map_variables variable_2="beta_0" variable_1="beta_0"/>
  </connection>
  
  <connection>
    <map_components component_2="reaction_constants" component_1="C2"/>
    <map_variables variable_2="alpha_0" variable_1="alpha_0"/>
    <map_variables variable_2="beta_0" variable_1="beta_0"/>
    <map_variables variable_2="Kf" variable_1="Kf"/>
    <map_variables variable_2="Kb" variable_1="Kb"/>
  </connection>
  
  <connection>
    <map_components component_2="reaction_constants" component_1="C3"/>
    <map_variables variable_2="alpha_1" variable_1="alpha_1"/>
    <map_variables variable_2="beta_1" variable_1="beta_1"/>
    <map_variables variable_2="alpha_i3" variable_1="alpha_i3"/>
    <map_variables variable_2="psi" variable_1="psi"/>
    <map_variables variable_2="Kf" variable_1="Kf"/>
    <map_variables variable_2="Kb" variable_1="Kb"/>
  </connection>
  
  <connection>
    <map_components component_2="reaction_constants" component_1="I"/>
    <map_variables variable_2="alpha_i" variable_1="alpha_i"/>
    <map_variables variable_2="beta_i" variable_1="beta_i"/>
    <map_variables variable_2="alpha_i3" variable_1="alpha_i3"/>
    <map_variables variable_2="psi" variable_1="psi"/>
  </connection>
  
  <connection>
    <map_components component_2="reaction_constants" component_1="O"/>
    <map_variables variable_2="alpha_i" variable_1="alpha_i"/>
    <map_variables variable_2="beta_i" variable_1="beta_i"/>
    <map_variables variable_2="alpha_1" variable_1="alpha_1"/>
    <map_variables variable_2="beta_1" variable_1="beta_1"/>
  </connection>






<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#73d2281d-57d2-4bdd-8a04-52a88ad71414">
    <rdf:li>kcne2</rdf:li>
    <rdf:li>long-QT syndrome</rdf:li>
    <rdf:li>hreg</rdf:li>
    <rdf:li>cardiac myocyte</rdf:li>
    <rdf:li>electrophysiology</rdf:li>
    <rdf:li>long-qt syndrome</rdf:li>
    <rdf:li>cardiac</rdf:li>
    <rdf:li>cardiac myocytes</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#7a1f72ec-87ee-495e-b1e8-87fc6dbecf17">
    <rdf:li rdf:resource="rdf:#f40976fb-c2a4-4016-8bf0-9adab851ad2e"/>
    <rdf:li rdf:resource="rdf:#8852401e-990c-44ff-b577-cf2351de2b9b"/>
    <rdf:li rdf:resource="rdf:#f77be5a3-b7ed-469e-b577-ea26d2b88a74"/>
    <rdf:li rdf:resource="rdf:#d49bf6f2-87ba-400c-b879-7eda5bc53bd7"/>
    <rdf:li rdf:resource="rdf:#4540cdc0-8a42-4609-b81e-d99e1e4c22f1"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
    <dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#80ba21dc-9f76-4f49-8620-64427ca67841"/>
    <dcterms:created rdf:resource="rdf:#d6b0066c-b6ad-4383-a422-513b7f778592"/>
    <dc:creator rdf:resource="rdf:#be8d0b8c-add9-4dd3-a5cd-73d94c45225f"/>
    <cmeta:modification rdf:resource="rdf:#d907c237-ed33-4642-9ae5-f6ddd46a621f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1490ba0f-4479-4111-b58c-5e8b9595bf26">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4558792c-227f-4d72-98cc-d8a8653936c3">
    <dc:subject rdf:resource="rdf:#f7046ed1-0bfb-417d-b324-db00b5311ea0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d36f77c3-67a4-4e62-940c-6df53abb2e9e">
    <bqs:Pubmed_id>11440975</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#fd399eee-98ab-42cb-bcda-d5f0fbf26cd9"/>
  </rdf:Description>
  <rdf:Description rdf:about="/O">
    <dcterms:alternative>open state</dcterms:alternative>
    <dc:title>O</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f64432d2-aafc-4473-bc9b-f5a504b89ef0">
    <vCard:Given>Richard</vCard:Given>
    <vCard:Family>Winslow</vCard:Family>
    <vCard:Other>L</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="/C2">
    <dcterms:alternative>closed state 2</dcterms:alternative>
    <dc:title>C2</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="/C3">
    <dcterms:alternative>closed state 3</dcterms:alternative>
    <dc:title>C3</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="/C1">
    <dcterms:alternative>closed state 1</dcterms:alternative>
    <dc:title>C1</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9b3dbe53-5e75-4c9b-92c6-90ef41d9cf82">
    <vCard:Given>Eduardo</vCard:Given>
    <vCard:Family>Marban</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8852401e-990c-44ff-b577-cf2351de2b9b">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#481002d3-3f1e-4f6a-8301-ff9253418062"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d49bf6f2-87ba-400c-b879-7eda5bc53bd7">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#9b3dbe53-5e75-4c9b-92c6-90ef41d9cf82"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#96586d37-0b2c-4d16-8dfb-5f6c86fc9d25">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4540cdc0-8a42-4609-b81e-d99e1e4c22f1">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#b9464b25-97fc-4c96-8987-e47b01aa001e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7067e84d-9959-43b5-aeae-b64db4c4fa7e">
    <vCard:Given>Reza</vCard:Given>
    <vCard:Family>Mazhari</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8e9d7333-f72a-4ad4-bacd-3d8c409d9cf9">
    <dcterms:W3CDTF>2007-06-05T09:44:00+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#mazhari_model_2001_version02">
    <dc:title>
        Mazhari et al's model of the molecular interactions between two long-QT 
        syndrome gene products, HERG and KCNE2.
      </dc:title>
    <cmeta:bio_entity>cardiac myocytes</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#6df9e6a2-2636-458c-925f-3207eb5b5329"/>
    <bqs:reference rdf:resource="rdf:#4558792c-227f-4d72-98cc-d8a8653936c3"/>
    <bqs:reference rdf:resource="rdf:#d36f77c3-67a4-4e62-940c-6df53abb2e9e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#10d762a8-b802-4407-8710-06c70cf2a5e3">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#be8d0b8c-add9-4dd3-a5cd-73d94c45225f">
    <vCard:ORG rdf:resource="rdf:#96586d37-0b2c-4d16-8dfb-5f6c86fc9d25"/>
    <vCard:EMAIL rdf:resource="rdf:#1490ba0f-4479-4111-b58c-5e8b9595bf26"/>
    <vCard:N rdf:resource="rdf:#cf928f0c-135b-430f-bece-8008d3890829"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a54d54ae-9bdd-4ae5-9c8d-38fcdfee6edb">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="/I">
    <dcterms:alternative>inactivated state</dcterms:alternative>
    <dc:title>I</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cf928f0c-135b-430f-bece-8008d3890829">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d907c237-ed33-4642-9ae5-f6ddd46a621f">
    <dcterms:modified rdf:resource="rdf:#8e9d7333-f72a-4ad4-bacd-3d8c409d9cf9"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics.  This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.

The model runs in the PCEnv simulator but gives a flat output.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#606a537c-4113-4ca2-a08a-019c6dd7ed2c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f7046ed1-0bfb-417d-b324-db00b5311ea0">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#73d2281d-57d2-4bdd-8a04-52a88ad71414"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fd399eee-98ab-42cb-bcda-d5f0fbf26cd9">
    <dc:creator rdf:resource="rdf:#7a1f72ec-87ee-495e-b1e8-87fc6dbecf17"/>
    <dc:title>Molecular Interactions Between Two Long-QT Syndrome Gene Products, 
            HERG and KCNE2, Rationalized by In Vitro and In Silico Analysis</dc:title>
    <bqs:volume>89</bqs:volume>
    <bqs:first_page>33</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#431dca5c-b8c4-41c3-a5d5-85682fb5d54b"/>
    <dcterms:issued rdf:resource="rdf:#29249650-7e76-4c4c-b8d2-aca4908023fe"/>
    <bqs:last_page>38</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#29249650-7e76-4c4c-b8d2-aca4908023fe">
    <dcterms:W3CDTF>2001-07-06 00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#606a537c-4113-4ca2-a08a-019c6dd7ed2c">
    <vCard:N rdf:resource="rdf:#a54d54ae-9bdd-4ae5-9c8d-38fcdfee6edb"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6681139b-251e-4e20-a1b8-93a9a3d273ab">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f40976fb-c2a4-4016-8bf0-9adab851ad2e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#7067e84d-9959-43b5-aeae-b64db4c4fa7e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b9464b25-97fc-4c96-8987-e47b01aa001e">
    <vCard:Given>H</vCard:Given>
    <vCard:Family>Nuss</vCard:Family>
    <vCard:Other>Bradley</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6df9e6a2-2636-458c-925f-3207eb5b5329">
    <dc:creator rdf:resource="rdf:#6681139b-251e-4e20-a1b8-93a9a3d273ab"/>
    <rdf:value>This is the CellML description of Mazhari et al's model of the molecular interactions between two long-QT syndrome gene products, HERG and KCNE2.

This model can be run in PCEnv but it gives a flat output.  I suspect it needs to be embedded within a whole cell model in order to give a reasonable output.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f77be5a3-b7ed-469e-b577-ea26d2b88a74">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#f64432d2-aafc-4473-bc9b-f5a504b89ef0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d6b0066c-b6ad-4383-a422-513b7f778592">
    <dcterms:W3CDTF>2003-05-23T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#431dca5c-b8c4-41c3-a5d5-85682fb5d54b">
    <dc:title>Circulation Research</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#80ba21dc-9f76-4f49-8620-64427ca67841">
    <dc:creator rdf:resource="rdf:#10d762a8-b802-4407-8710-06c70cf2a5e3"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#481002d3-3f1e-4f6a-8301-ff9253418062">
    <vCard:Given>Joseph</vCard:Given>
    <vCard:Family>Greenstein</vCard:Family>
    <vCard:Other>L</vCard:Other>
  </rdf:Description>
</rdf:RDF>
</model>
