<?xml version='1.0' encoding='UTF-8'?>
<model name="Current_eq" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="unit.cellml">
        <units name="mV" units_ref="mV"/>
        <units name="mM" units_ref="mM"/>
        <units name="pA_per_pF" units_ref="pA_per_pF"/>
        <units name="nS_per_pF" units_ref="nS_per_pF"/>
    </import>
    <component name="Current_Iks">
        <variable name="v" public_interface="in" units="mV"/>
        <variable name="E_K" public_interface="in" units="mV"/>
        <variable name="Ko" public_interface="in" units="mM"/>
        <variable name="x_ks_inf_act" public_interface="in" units="dimensionless"/>
        <variable initial_value="0" name="X_ks_act" public_interface="out" units="dimensionless"/>
        <variable name="dX_ks_act" public_interface="out" units="dimensionless"/>
        <variable name="g_Ks" public_interface="out" units="nS_per_pF"/>
        <variable name="i_Ks" public_interface="out" units="pA_per_pF"/>
        <variable name="ks_0" public_interface="in" units="nS_per_pF"/>
        <variable name="tau_ks_act" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>dX_ks_act</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>x_ks_inf_act</ci>
                        <ci>X_ks_act</ci>
                    </apply>
                    <ci>tau_ks_act</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>g_Ks</ci>
                <ci>ks_0</ci>
            </apply>
            <apply>
                <eq/>
                <ci>i_Ks</ci>
                <apply>
                    <times/>
                    <ci>g_Ks</ci>
                    <apply>
                        <root/>
                        <apply>
                            <divide/>
                            <ci>Ko</ci>
                            <cn cellml:units="dimensionless">5.4</cn>
                        </apply>
                    </apply>
                    <apply>
                        <power/>
                        <ci>X_ks_act</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>v</ci>
                        <ci>E_K</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
