<?xml version='1.0' encoding='UTF-8'?>
<model name="gating_eq" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="unit.cellml">
        <units name="per_ms" units_ref="per_ms"/>
        <units name="mV" units_ref="mV"/>
        <!--        unit mM using unit mM;-->
        <units name="mV_ms" units_ref="mV_ms"/>
        <units name="ms" units_ref="ms"/>
        <!--        unit pA_per_pF using unit pA_per_pF;
        unit nS_per_pF using unit nS_per_pF;-->
    </import>
    <component name="gating_Ito">
        <variable name="v" public_interface="in" units="mV"/>
        <variable name="alpha_act" public_interface="out" units="per_ms"/>
        <variable name="beta_act" public_interface="out" units="per_ms"/>
        <variable name="alpha_inact" public_interface="out" units="per_ms"/>
        <variable name="beta_inact" public_interface="out" units="per_ms"/>
        <variable name="r_1" public_interface="in" units="dimensionless"/>
        <variable name="r_2" public_interface="in" units="dimensionless"/>
        <variable name="r_3" public_interface="out" units="dimensionless"/>
        <variable name="r_4" public_interface="out" units="dimensionless"/>
        <variable name="r_5" public_interface="in" units="dimensionless"/>
        <variable name="r_6" public_interface="in" units="dimensionless"/>
        <variable name="s_1" public_interface="in" units="dimensionless"/>
        <variable name="s_2" public_interface="in" units="dimensionless"/>
        <variable name="s_3" public_interface="out" units="dimensionless"/>
        <variable name="s_4" public_interface="out" units="dimensionless"/>
        <variable name="s_5" public_interface="in" units="dimensionless"/>
        <variable name="s_6" public_interface="in" units="dimensionless"/>
        <variable name="tau_r_const" public_interface="in" units="dimensionless"/>
        <variable name="tau_s_const" public_interface="in" units="dimensionless"/>
        <variable name="x_to_inf_act" public_interface="out" units="dimensionless"/>
        <variable name="x_to_inf_inact" public_interface="out" units="dimensionless"/>
        <variable name="tau_to_act" public_interface="out" units="ms"/>
        <variable name="tau_to_inact" public_interface="out" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>r_3</ci>
                <apply>
                    <times/>
                    <ci>r_5</ci>
                    <ci>r_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>s_3</ci>
                <apply>
                    <times/>
                    <ci>s_5</ci>
                    <ci>s_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>r_4</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>r_2</ci>
                        </apply>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>r_6</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>s_4</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>s_2</ci>
                        </apply>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>s_6</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>alpha_act</ci>
                <apply>
                    <times/>
                    <ci>r_1</ci>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <ci>v</ci>
                            <ci>r_2</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta_act</ci>
                <apply>
                    <times/>
                    <ci>r_3</ci>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <ci>v</ci>
                            <ci>r_4</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>x_to_inf_act</ci>
                <apply>
                    <divide/>
                    <ci>alpha_act</ci>
                    <apply>
                        <plus/>
                        <ci>alpha_act</ci>
                        <ci>beta_act</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_to_act</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <plus/>
                            <ci>alpha_act</ci>
                            <ci>beta_act</ci>
                        </apply>
                    </apply>
                    <ci>tau_r_const</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>alpha_inact</ci>
                <apply>
                    <times/>
                    <ci>s_1</ci>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <ci>v</ci>
                            <ci>s_2</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta_inact</ci>
                <apply>
                    <times/>
                    <ci>s_3</ci>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <ci>v</ci>
                            <ci>s_4</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>x_to_inf_inact</ci>
                <apply>
                    <divide/>
                    <ci>alpha_inact</ci>
                    <apply>
                        <plus/>
                        <ci>alpha_inact</ci>
                        <ci>beta_inact</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_to_inact</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <plus/>
                            <ci>alpha_inact</ci>
                            <ci>beta_inact</ci>
                        </apply>
                    </apply>
                    <ci>tau_s_const</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
