<?xml version='1.0' encoding='UTF-8'?>
<model name="parameters" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <component name="parameter">
        <variable initial_value="99.17440" name="x1" public_interface="out" units="dimensionless"/>
        <variable initial_value="12.8324" name="x2" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0039" name="x5" public_interface="out" units="dimensionless"/>
        <variable initial_value="-8.2139" name="x6" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0374" name="x7" public_interface="out" units="dimensionless"/>
        <variable initial_value="-75.6" name="v" public_interface="out" units="mV"/>
        <variable initial_value="8.314472" name="R" public_interface="out" units="J_per_mol_per_kelvin"/>
        <variable initial_value="310.0" name="T" public_interface="out" units="kelvin"/>
        <variable initial_value="96.4853415" name="F" public_interface="out" units="C_per_mol"/>
        <variable initial_value="1.8" name="Cao" public_interface="out" units="mM"/>
        <variable initial_value="0.00022" name="ca_i" public_interface="out" units="mM"/>
        <variable initial_value="140" name="Nao" public_interface="out" units="mM"/>
        <variable initial_value="5.4" name="Ko" public_interface="out" units="mM"/>
        <variable initial_value="0.3350868" name="ca_SR" public_interface="out" units="mM"/>
        <variable initial_value="60" name="Cm" public_interface="out" units="dimensionless"/>
        <variable initial_value="3960" name="V_tot" public_interface="out" units="dimensionless"/>
        <variable initial_value="16404" name="Vc_tenT" public_interface="out" units="dimensionless"/>
        <variable initial_value="1094" name="VSR_tenT" public_interface="out" units="dimensionless"/>
        <variable name="V_tot_tenT" public_interface="out" units="dimensionless"/>
        <variable name="Vc" public_interface="out" units="mM3"/>
        <variable name="V_SR" public_interface="out" units="mM3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>V_tot_tenT</ci>
                <apply>
                    <plus/>
                    <ci>Vc_tenT</ci>
                    <ci>VSR_tenT</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Vc</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>V_tot</ci>
                        <ci>Vc_tenT</ci>
                    </apply>
                    <ci>V_tot_tenT</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>V_SR</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>V_tot</ci>
                        <ci>VSR_tenT</ci>
                    </apply>
                    <ci>V_tot_tenT</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
