<?xml version='1.0' encoding='UTF-8'?>
<model name="Current_eq" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="unit.cellml">
        <units name="mV" units_ref="mV"/>
        <units name="mM" units_ref="mM"/>
        <units name="pA_per_pF" units_ref="pA_per_pF"/>
        <units name="nS_per_pF" units_ref="nS_per_pF"/>
    </import>
    <component name="Current_Icat">
        <variable name="v" public_interface="in" units="mV"/>
        <variable name="E_Ca" public_interface="in" units="mV"/>
        <variable name="x_cat_inf_act" public_interface="in" units="dimensionless"/>
        <variable name="x_cat_inf_inact" public_interface="in" units="dimensionless"/>
        <variable initial_value="0" name="X_cat_act" public_interface="out" units="dimensionless"/>
        <variable initial_value="0" name="X_cat_inact" public_interface="out" units="dimensionless"/>
        <variable name="dX_cat_act" public_interface="out" units="dimensionless"/>
        <variable name="dX_cat_inact" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.185" name="g_cat" public_interface="out" units="nS_per_pF"/>
        <variable name="i_cat" public_interface="out" units="pA_per_pF"/>
        <variable name="tau_cat_act" public_interface="in" units="ms"/>
        <variable name="tau_cat_inact" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>dX_cat_act</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>x_cat_inf_act</ci>
                        <ci>X_cat_act</ci>
                    </apply>
                    <ci>tau_cat_act</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>dX_cat_inact</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>x_cat_inf_inact</ci>
                        <ci>X_cat_inact</ci>
                    </apply>
                    <ci>tau_cat_inact</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i_cat</ci>
                <apply>
                    <times/>
                    <ci>g_cat</ci>
                    <ci>X_cat_act</ci>
                    <ci>X_cat_inact</ci>
                    <apply>
                        <minus/>
                        <ci>v</ci>
                        <ci>E_Ca</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
