<?xml version='1.0' encoding='UTF-8'?>
<model name="Current_eq" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="unit.cellml">
        <units name="mV" units_ref="mV"/>
        <units name="mM" units_ref="mM"/>
        <units name="pA_per_pF" units_ref="pA_per_pF"/>
        <units name="nS_per_pF" units_ref="nS_per_pF"/>
    </import>
    <component name="Current_Ikr">
        <variable name="v" public_interface="in" units="mV"/>
        <variable name="E_K" public_interface="in" units="mV"/>
        <variable name="Ko" public_interface="in" units="mM"/>
        <!--        var alpha_act: per_ms {pub: out};
        var beta_act: per_ms {pub: out};
        var alpha_inact: per_ms {pub: out};
        var beta_inact: per_ms {pub: out};-->
        <variable name="x_inf_act" public_interface="in" units="dimensionless"/>
        <variable name="x_inf_inact" public_interface="in" units="dimensionless"/>
        <variable initial_value="0" name="X_kr_act" public_interface="out" units="dimensionless"/>
        <variable initial_value="0" name="X_kr_inact" public_interface="out" units="dimensionless"/>
        <variable name="dX_kr_act" public_interface="out" units="dimensionless"/>
        <variable name="dX_kr_inact" public_interface="out" units="dimensionless"/>
        <variable name="g_Kr" public_interface="out" units="nS_per_pF"/>
        <variable name="i_Kr" public_interface="out" units="pA_per_pF"/>
        <variable name="Xr1_0" public_interface="in" units="nS_per_pF"/>
        <variable name="tau_act" public_interface="in" units="ms"/>
        <variable name="tau_inact" public_interface="in" units="ms"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>dX_kr_act</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>x_inf_act</ci>
                        <ci>X_kr_act</ci>
                    </apply>
                    <ci>tau_act</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>dX_kr_inact</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>x_inf_inact</ci>
                        <ci>X_kr_inact</ci>
                    </apply>
                    <ci>tau_inact</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>g_Kr</ci>
                <ci>Xr1_0</ci>
            </apply>
            <apply>
                <eq/>
                <ci>i_Kr</ci>
                <apply>
                    <times/>
                    <ci>g_Kr</ci>
                    <apply>
                        <root/>
                        <apply>
                            <divide/>
                            <ci>Ko</ci>
                            <cn cellml:units="dimensionless">5.4</cn>
                        </apply>
                    </apply>
                    <ci>X_kr_act</ci>
                    <ci>X_kr_inact</ci>
                    <apply>
                        <minus/>
                        <ci>v</ci>
                        <ci>E_K</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
