<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 20/06/2007 at 12:39:18 at a.m. using:

COR (0.9.31.649)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="bhalla_model_1999" name="bi_model_1999_version01">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Emergent properties of networks of biological signaling pathways</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This version of the CellML model describes the MAPK pathway component of the Bhalla-Iyengar model. This model is able to be solved but does not give the correct results as it is not connected to the other modules of the pathway. ValidateCellML verifies this model as valid CellML but detects unit inconsistencies.
    </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Many distinct signaling pathways allow the cell to receive, process, and respond to information. Often, components of different pathways interact, resulting in signaling networks. Biochemical signaling networks were constructed with experimentally obtained constants and analyzed by computational methods to understand their role in complex biological processes. These networks exhibit emergent properties such as integration of signals across multiple time scales, generation of distinct outputs depending on input strength and duration, and self-sustaining feedback loops. Feedback can result in bistable behavior with discrete steady-state activities, well-defined input thresholds for transition between states and prolonged signal output, and signal modulation in response to transient stimuli. These properties of signaling networks raise the possibility that information for "learned behavior" of biological systems may be stored within intracellular biochemical reactions that comprise signaling pathways.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Emergent properties of networks of biological signaling pathways. Bhalla US, Iyengar R.
            <emphasis>Science</emphasis> 1999 Jan 15; 283(5400); 381-7.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=9888852&amp;dopt=Abstract">PubMed ID: 9888852</ulink>
</para>

<informalfigure float="0" id="fig_pathway_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="bhalla_iyengar_mapk.png"/>
  </imageobject>
</mediaobject>
<caption>A rendering of the MAPK pathway component of the Bhalla-Iyengar model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>



   <units name="s">
      <unit units="second"/>
   </units>
   <units name="per_um_s">
      <unit units="mole" prefix="micro" exponent="-1"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="um">
      <unit units="litre" exponent="-1"/>
      <unit units="mole" prefix="micro"/>
   </units>
   <units name="um_per_s">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="per_s">
      <unit units="s" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="s" public_interface="out" name="t"/>
   </component>
   <component name="RAF">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="per_um_s" name="kf5" initial_value="0.00004"/>
      <variable units="per_s" name="kb5" initial_value="0.5"/>
      <variable units="um" name="km1" initial_value="66.666666667"/>
      <variable units="um" name="km2" initial_value="25.64166667"/>
      <variable units="um" name="km3" initial_value="15.6565"/>
      <variable units="um" name="km4" initial_value="15.6565"/>
      <variable units="per_s" name="Vmax1" initial_value="4"/>
      <variable units="per_s" name="Vmax2" initial_value="10"/>
      <variable units="per_s" name="Vmax3" initial_value="6"/>
      <variable units="per_s" name="Vmax4" initial_value="6"/>
      <variable units="um" public_interface="in" name="PKC"/>
      <variable units="um" name="PP2A" initial_value="0.224"/>
      <variable units="um" public_interface="in" name="MAPK_star"/>
      <variable units="um" name="Raf" initial_value="0.1"/>
      <variable units="um" name="Raf_star" initial_value="0"/>
      <variable units="um" name="Raf_star_star" initial_value="0"/>
      <variable units="um" name="GTPRas" initial_value="0.1"/>
      <variable units="um" public_interface="out" name="GTPRasRaf_star" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GTPRasRaf_star</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>GTPRas</ci>
                  <ci>Raf_star</ci>
                  <ci>kf5</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>GTPRasRaf_star</ci>
                  <ci>kb5</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GTPRas</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>GTPRas</ci>
                  </apply>
                  <ci>Raf_star</ci>
                  <ci>kf5</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>GTPRasRaf_star</ci>
                  <ci>kb5</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Raf</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>PKC</ci>
                     </apply>
                     <ci>Raf</ci>
                     <ci>Vmax1</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km1</ci>
                     <ci>Raf</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>Raf_star</ci>
                     <ci>PP2A</ci>
                     <ci>Vmax3</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km3</ci>
                     <ci>Raf_star</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Raf_star</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>PKC</ci>
                           <ci>Raf</ci>
                           <ci>Vmax1</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km1</ci>
                           <ci>Raf</ci>
                        </apply>
                     </apply>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>Raf_star</ci>
                           <ci>PP2A</ci>
                           <ci>Vmax3</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km3</ci>
                           <ci>Raf_star</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>Raf_star</ci>
                        <ci>MAPK_star</ci>
                        <ci>Vmax2</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>km2</ci>
                        <ci>Raf_star</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>Raf_star_star</ci>
                     <ci>PP2A</ci>
                     <ci>Vmax4</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km4</ci>
                     <ci>Raf_star_star</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Raf_star_star</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>Raf_star</ci>
                     <ci>MAPK_star</ci>
                     <ci>Vmax2</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km2</ci>
                     <ci>Raf_star</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>Raf_star_star</ci>
                     <ci>PP2A</ci>
                     <ci>Vmax4</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km4</ci>
                     <ci>Raf_star_star</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="MAPKK">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="um" name="km6" initial_value="0.159091667"/>
      <variable units="um" name="km7" initial_value="0.159091667"/>
      <variable units="um" name="km8" initial_value="15.6565"/>
      <variable units="um" name="km9" initial_value="15.6565"/>
      <variable units="per_s" name="Vmax6" initial_value="0.105"/>
      <variable units="per_s" name="Vmax7" initial_value="0.105"/>
      <variable units="per_s" name="Vmax8" initial_value="6"/>
      <variable units="per_s" name="Vmax9" initial_value="6"/>
      <variable units="um" name="PP2A" initial_value="0.224"/>
      <variable units="um" public_interface="in" name="GTPRasRaf_star"/>
      <variable units="um" name="MAPKK" initial_value="0.18"/>
      <variable units="um" name="MAPKK_star" initial_value="0"/>
      <variable units="um" public_interface="out" name="MAPKK_star_star" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>MAPKK</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>MAPKK</ci>
                     </apply>
                     <ci>Vmax6</ci>
                     <ci>GTPRasRaf_star</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km6</ci>
                     <ci>MAPKK</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>MAPKK_star</ci>
                     <ci>Vmax8</ci>
                     <ci>PP2A</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km8</ci>
                     <ci>MAPKK_star</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>MAPKK_star</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>MAPKK</ci>
                           <ci>Vmax6</ci>
                           <ci>GTPRasRaf_star</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km6</ci>
                           <ci>MAPKK</ci>
                        </apply>
                     </apply>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>MAPKK_star</ci>
                           <ci>Vmax8</ci>
                           <ci>PP2A</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km8</ci>
                           <ci>MAPKK_star</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>MAPKK_star</ci>
                        <ci>Vmax7</ci>
                        <ci>GTPRasRaf_star</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>km7</ci>
                        <ci>MAPKK_star</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>MAPKK_star_star</ci>
                     <ci>Vmax9</ci>
                     <ci>PP2A</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km9</ci>
                     <ci>MAPKK_star_star</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>MAPKK_star_star</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>MAPKK_star</ci>
                     <ci>Vmax7</ci>
                     <ci>GTPRasRaf_star</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km7</ci>
                     <ci>MAPKK_star</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>MAPKK_star_star</ci>
                     <ci>Vmax9</ci>
                     <ci>PP2A</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km9</ci>
                     <ci>MAPKK_star_star</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="MAPK">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="um" name="km10" initial_value="0.046296667"/>
      <variable units="um" name="km11" initial_value="0.046296667"/>
      <variable units="um" name="km12" initial_value="0.066666667"/>
      <variable units="um" name="km13" initial_value="0.066666667"/>
      <variable units="per_s" name="Vmax10" initial_value="0.15"/>
      <variable units="per_s" name="Vmax11" initial_value="0.15"/>
      <variable units="per_s" name="Vmax12" initial_value="1"/>
      <variable units="per_s" name="Vmax13" initial_value="1"/>
      <variable units="um" public_interface="in" name="MAPKK_star_star"/>
      <variable units="um" name="MAPK" initial_value="0.36"/>
      <variable units="um" name="MAPK_tyr" initial_value="0"/>
      <variable units="um" public_interface="out" name="MAPK_star" initial_value="0"/>
      <variable units="um" name="MKP1" initial_value="0.032"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>MAPK</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>MAPK</ci>
                     </apply>
                     <ci>Vmax10</ci>
                     <ci>MAPKK_star_star</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km10</ci>
                     <ci>MAPK</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>MAPK_tyr</ci>
                     <ci>Vmax12</ci>
                     <ci>MKP1</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km12</ci>
                     <ci>MAPK_tyr</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>MAPK_tyr</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>MAPK</ci>
                           <ci>Vmax10</ci>
                           <ci>MAPKK_star_star</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km10</ci>
                           <ci>MAPK</ci>
                        </apply>
                     </apply>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>MAPK_tyr</ci>
                           <ci>Vmax12</ci>
                           <ci>MKP1</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km12</ci>
                           <ci>MAPK_tyr</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>MAPK_tyr</ci>
                        <ci>Vmax11</ci>
                        <ci>MAPKK_star_star</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>km11</ci>
                        <ci>MAPK_tyr</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>MAPK_star</ci>
                     <ci>Vmax13</ci>
                     <ci>MKP1</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km13</ci>
                     <ci>MAPK_star</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>MAPK_star</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>MAPK_tyr</ci>
                     <ci>Vmax11</ci>
                     <ci>MAPKK_star_star</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km11</ci>
                     <ci>MAPK_tyr</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>MAPK_star</ci>
                     <ci>Vmax13</ci>
                     <ci>MKP1</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km13</ci>
                     <ci>MAPK_star</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="undefinedvariables">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="um" public_interface="out" name="PKC" initial_value="0.1"/>
   </component>
   <connection>
      <map_components component_2="environment" component_1="MAPKK"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="MAPK"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="RAF"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="undefinedvariables"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="RAF" component_1="MAPK"/>
      <map_variables variable_2="MAPK_star" variable_1="MAPK_star"/>
   </connection>
   <connection>
      <map_components component_2="MAPKK" component_1="RAF"/>
      <map_variables variable_2="GTPRasRaf_star" variable_1="GTPRasRaf_star"/>
   </connection>
   <connection>
      <map_components component_2="MAPK" component_1="MAPKK"/>
      <map_variables variable_2="MAPKK_star_star" variable_1="MAPKK_star_star"/>
   </connection>
   <connection>
      <map_components component_2="RAF" component_1="undefinedvariables"/>
      <map_variables variable_2="PKC" variable_1="PKC"/>
   </connection>


<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#5addc34f-dbb0-485b-83e1-31185b045273">
    <rdf:li rdf:resource="rdf:#fdfaa2ba-b8a1-4a5f-a6a6-72d5c044043f"/>
    <rdf:li rdf:resource="rdf:#41f1c4bf-99eb-4b8e-a436-bd8843d63951"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
  <dc:title>MAPK pathway component of the Bhalla-Iyengar model</dc:title>
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#b389b2db-460f-4e5b-b94a-316cdeffdfea"/>
    <dcterms:created rdf:resource="rdf:#72d7fb6e-46ae-4efd-aa17-64d6cb63d723"/>
    <dc:creator rdf:resource="rdf:#90cc33d9-5587-4bea-a06f-2fedb9976b2b"/>
    <cmeta:modification rdf:resource="rdf:#cb90b541-0b15-43fa-8848-5f07fd3cf628"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#72d7fb6e-46ae-4efd-aa17-64d6cb63d723">
    <dcterms:W3CDTF>2007-08-28T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#28235b1c-9681-4e8d-958e-e01ed0e0f077">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>m.mccormick@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5593ab3e-46aa-4ae5-9915-1443eab9ddf8">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6d37b098-e67e-4a42-96b9-91e4336fd914">
    <dc:title>Science</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3dcae384-87f8-4c5a-b7b9-6ccf5a9deaf5">
    <dc:creator rdf:resource="rdf:#da37a681-3c4c-40b9-bc1c-fc532b6cd583"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#33779ec4-26a4-453e-8fdf-11e9cd622e22">
    <vCard:N rdf:resource="rdf:#5593ab3e-46aa-4ae5-9915-1443eab9ddf8"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8f501632-aab3-4e75-82ee-70e25740c1c5">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f50ff5c0-9138-486c-ab25-61257ca860ef">
    <vCard:Given>Matthew</vCard:Given>
    <vCard:Family>McCormick</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#41f1c4bf-99eb-4b8e-a436-bd8843d63951">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#141926d7-d6ca-493a-9822-e97b586bac0d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b389b2db-460f-4e5b-b94a-316cdeffdfea">
    <dc:creator rdf:resource="rdf:#8f501632-aab3-4e75-82ee-70e25740c1c5"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="#bhalla_model_1999">
  <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>signal_transduction</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>
    <bqs:reference rdf:resource="rdf:#74305f9f-36d0-42b0-86f7-24e41983e682"/>
    <cmeta:comment rdf:resource="rdf:#3dcae384-87f8-4c5a-b7b9-6ccf5a9deaf5"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#444748a4-0a1b-4e2e-9e1c-4aea6a444468">
    <vCard:Given>Upinder</vCard:Given>
    <vCard:Family>Bhalla</vCard:Family>
    <vCard:Other>S</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#74305f9f-36d0-42b0-86f7-24e41983e682">
    <bqs:Pubmed_id>9888852</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#cfefa4d1-2be1-4af6-9fc3-6f9ae787ec29"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bbdbd170-e52c-49c9-bef6-e866f4f25ba8">
    <dcterms:W3CDTF>1999-01-15</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#90cc33d9-5587-4bea-a06f-2fedb9976b2b">
    <vCard:ORG rdf:resource="rdf:#6a85d8b1-d12f-45bc-bdbb-8747cf4a3b18"/>
    <vCard:EMAIL rdf:resource="rdf:#28235b1c-9681-4e8d-958e-e01ed0e0f077"/>
    <vCard:N rdf:resource="rdf:#f50ff5c0-9138-486c-ab25-61257ca860ef"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6a85d8b1-d12f-45bc-bdbb-8747cf4a3b18">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fdfaa2ba-b8a1-4a5f-a6a6-72d5c044043f">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#444748a4-0a1b-4e2e-9e1c-4aea6a444468"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#da37a681-3c4c-40b9-bc1c-fc532b6cd583">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fdab0cec-5286-4175-b8bf-8b2676b99d6a">
    <dcterms:W3CDTF>2009-05-27T15:03:01+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cb90b541-0b15-43fa-8848-5f07fd3cf628">
    <dcterms:modified rdf:resource="rdf:#fdab0cec-5286-4175-b8bf-8b2676b99d6a"/>
    <rdf:value>updated curation status</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#33779ec4-26a4-453e-8fdf-11e9cd622e22"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cfefa4d1-2be1-4af6-9fc3-6f9ae787ec29">
    <dc:creator rdf:resource="rdf:#5addc34f-dbb0-485b-83e1-31185b045273"/>
    <dc:title>Emergent Properties of Networks of Biological Signaling Pathways</dc:title>
    <bqs:volume>283</bqs:volume>
    <bqs:first_page>381</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#6d37b098-e67e-4a42-96b9-91e4336fd914"/>
    <dcterms:issued rdf:resource="rdf:#bbdbd170-e52c-49c9-bef6-e866f4f25ba8"/>
    <bqs:last_page>387</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#141926d7-d6ca-493a-9822-e97b586bac0d">
    <vCard:Given>Ravi</vCard:Given>
    <vCard:Family>Iyengar</vCard:Family>
  </rdf:Description>
</rdf:RDF>
</model>