<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 20/06/2007 at 12:39:18 at a.m. using:

COR (0.9.31.649)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="bhalla_model_1999" name="bi_model_1999_version01">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Emergent properties of networks of biological signaling pathways</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This particular version of the CellML model describes the conversion of PIP to IP3 and DAG. This model is able to be solved but does not give the correct results as it is not connected to the other modules of the pathway. ValidateCellML verifies this model as valid CellML but detects unit inconsistencies.</para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Many distinct signaling pathways allow the cell to receive, process, and respond to information. Often, components of different pathways interact, resulting in signaling networks. Biochemical signaling networks were constructed with experimentally obtained constants and analyzed by computational methods to understand their role in complex biological processes. These networks exhibit emergent properties such as integration of signals across multiple time scales, generation of distinct outputs depending on input strength and duration, and self-sustaining feedback loops. Feedback can result in bistable behavior with discrete steady-state activities, well-defined input thresholds for transition between states and prolonged signal output, and signal modulation in response to transient stimuli. These properties of signaling networks raise the possibility that information for "learned behavior" of biological systems may be stored within intracellular biochemical reactions that comprise signaling pathways.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Emergent properties of networks of biological signaling pathways. Bhalla US, Iyengar R.
            <emphasis>Science</emphasis> 1999 Jan 15; 283(5400); 381-7.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=9888852&amp;dopt=Abstract">PubMed ID: 9888852</ulink>
</para>


<informalfigure float="0" id="fig_pathway_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="bhalla_iyengar_pip_ip3dag.png"/>
  </imageobject>
</mediaobject>
<caption>A rendering of the conversion of PIP to IP3 and DAG component of the Bhalla-Iyengar model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>



   <units name="s">
      <unit units="second"/>
   </units>
   <units name="per_um_s">
      <unit units="mole" prefix="micro" exponent="-1"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="um">
      <unit units="litre" exponent="-1"/>
      <unit units="mole" prefix="micro"/>
   </units>
   <units name="um_per_s">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="per_s">
      <unit units="s" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="s" public_interface="out" name="t"/>
   </component>
   <component name="PIPtoDAG">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="per_s" name="kf8" initial_value="0.15"/>
      <variable units="per_s" name="kf9" initial_value="2.5"/>
      <variable units="um" name="km6" initial_value="5"/>
      <variable units="per_s" name="Vmax6" initial_value="48"/>
      <variable units="um" name="km7" initial_value="19.84166667"/>
      <variable units="per_s" name="Vmax7" initial_value="10"/>
      <variable units="um" name="PIP2" initial_value="10"/>
      <variable units="um" name="DAG" initial_value="0"/>
      <variable units="um" name="IP3" initial_value="0"/>
      <variable units="um" public_interface="in" name="CaPLC"/>
      <variable units="um" public_interface="in" name="CaGqPLC"/>
      <variable units="um" name="Inositol" initial_value="0"/>
      <variable units="um" name="PC" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>PIP2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>CaPLC</ci>
                     </apply>
                     <ci>Vmax7</ci>
                     <ci>PIP2</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km7</ci>
                     <ci>PIP2</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>CaGqPLC</ci>
                     <ci>Vmax6</ci>
                     <ci>PIP2</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km6</ci>
                     <ci>PIP2</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>DAG</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>CaPLC</ci>
                     <ci>Vmax7</ci>
                     <ci>PIP2</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km7</ci>
                     <ci>PIP2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kf8</ci>
                  <ci>DAG</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>IP3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>CaGqPLC</ci>
                     <ci>Vmax6</ci>
                     <ci>PIP2</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km6</ci>
                     <ci>PIP2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kf9</ci>
                  <ci>IP3</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>PC</ci>
            </apply>
            <apply>
               <times/>
               <ci>kf8</ci>
               <ci>DAG</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Inositol</ci>
            </apply>
            <apply>
               <times/>
               <ci>kf9</ci>
               <ci>IP3</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="PLC">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="per_um_s" name="kf1" initial_value="0.000005"/>
      <variable units="per_s" name="kb1" initial_value="1"/>
      <variable units="per_um_s" name="kf2" initial_value="0.0000042"/>
      <variable units="per_s" name="kb2" initial_value="1"/>
      <variable units="per_um_s" name="kf3" initial_value="0.00005"/>
      <variable units="per_s" name="kb3" initial_value="1"/>
      <variable units="per_um_s" name="kf4" initial_value="0.0000042"/>
      <variable units="per_s" name="kb4" initial_value="1"/>
      <variable units="per_s" name="kf5" initial_value="0.0133"/>
      <variable units="um" name="PLC" initial_value="0.8"/>
      <variable units="um" name="Gq" initial_value="0.15"/>
      <variable units="um" name="Ca" initial_value="0.1"/>
      <variable units="um" name="GqPLC" initial_value="0"/>
      <variable units="um" public_interface="out" name="CaGqPLC" initial_value="0"/>
      <variable units="um" public_interface="out" name="CaPLC" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>PLC</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <ci>PLC</ci>
                        </apply>
                        <ci>Ca</ci>
                        <ci>kf1</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>CaPLC</ci>
                        <ci>kb1</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>PLC</ci>
                     <ci>Gq</ci>
                     <ci>kf2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>GqPLC</ci>
                  <ci>kb2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Gq</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>PLC</ci>
                     </apply>
                     <ci>Gq</ci>
                     <ci>kf2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>GqPLC</ci>
                     <ci>kb2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>CaGqPLC</ci>
                     <ci>kb4</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>CaPLC</ci>
                  <ci>Gq</ci>
                  <ci>kf4</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Ca</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <ci>PLC</ci>
                        </apply>
                        <ci>Ca</ci>
                        <ci>kf1</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>CaPLC</ci>
                        <ci>kb1</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>Ca</ci>
                     <ci>GqPLC</ci>
                     <ci>kf3</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>CaGqPLC</ci>
                  <ci>kb3</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GqPLC</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>PLC</ci>
                        <ci>Gq</ci>
                        <ci>kf2</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>GqPLC</ci>
                        <ci>kb2</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>Ca</ci>
                     <ci>GqPLC</ci>
                     <ci>kf3</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>CaGqPLC</ci>
                  <ci>kb3</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>CaPLC</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>PLC</ci>
                        <ci>Ca</ci>
                        <ci>kf1</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>CaPLC</ci>
                        <ci>kb1</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>CaGqPLC</ci>
                     <ci>kf5</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>CaGqPLC</ci>
                     <ci>kb4</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>CaPLC</ci>
                  <ci>Gq</ci>
                  <ci>kf4</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>CaGqPLC</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <minus/>
                        <apply>
                           <times/>
                           <ci>GqPLC</ci>
                           <ci>Ca</ci>
                           <ci>kf3</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>CaGqPLC</ci>
                           <ci>kb3</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>CaPLC</ci>
                        <ci>Gq</ci>
                        <ci>kf4</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>CaGqPLC</ci>
                     <ci>kb4</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>CaGqPLC</ci>
                  <ci>kf5</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_2="environment" component_1="PIPtoDAG"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="PLC"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="PIPtoDAG" component_1="PLC"/>
      <map_variables variable_2="CaPLC" variable_1="CaPLC"/>
      <map_variables variable_2="CaGqPLC" variable_1="CaGqPLC"/>
   </connection>


<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#6b555317-c5f9-43b8-a174-8838322ad387">
    <rdf:li rdf:resource="rdf:#bebc6ac0-0e8e-4ab7-8be1-b0660fd281e2"/>
    <rdf:li rdf:resource="rdf:#d279f316-efa6-4853-88b3-9528ac5bfb75"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
  <dc:title>Conversion of PIP to IP3 and DAG component of the Bhalla-Iyengar model</dc:title>
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#51d04247-32a4-419b-92c1-3692cc3a3744"/>
    <dcterms:created rdf:resource="rdf:#a7d8df99-1934-4cde-9aeb-93bdf355f7ed"/>
    <dc:creator rdf:resource="rdf:#88a0840d-59d0-461d-b17c-edf0f1e3cc54"/>
    <cmeta:modification rdf:resource="rdf:#875a6107-adfb-4fa9-ac7f-3f88eb0ee2f5"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#88a0840d-59d0-461d-b17c-edf0f1e3cc54">
    <vCard:ORG rdf:resource="rdf:#552a58f6-7691-4590-8417-092133421686"/>
    <vCard:EMAIL rdf:resource="rdf:#d7e3b7ae-1fbc-4979-8fa8-94b1fa5aba09"/>
    <vCard:N rdf:resource="rdf:#c1388c2c-05d0-465c-8f8b-f14d2b94d47b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d279f316-efa6-4853-88b3-9528ac5bfb75">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#bc78b54e-80cc-4046-8d3f-d6e1882cf042"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#26110c7b-34e8-4c19-9aaa-328e149568cb">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bebc6ac0-0e8e-4ab7-8be1-b0660fd281e2">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#da85d985-7959-487b-bb8f-849fde52af78"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d0c1e381-e895-4d1e-954e-bb9aef0bab7f">
    <dcterms:W3CDTF>1999-01-15</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1db7b0d5-8e3f-47f2-8213-21eae994f284">
    <dcterms:W3CDTF>2009-05-27T15:03:56+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d7e3b7ae-1fbc-4979-8fa8-94b1fa5aba09">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>m.mccormick@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#336901dc-e9ac-4836-a5ae-49db52fbd01c">
    <vCard:N rdf:resource="rdf:#26110c7b-34e8-4c19-9aaa-328e149568cb"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1611df11-cfb6-4bf9-97f0-ef44ef9fa1e1">
    <dc:title>Science</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a7d8df99-1934-4cde-9aeb-93bdf355f7ed">
    <dcterms:W3CDTF>2007-08-28T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#875a6107-adfb-4fa9-ac7f-3f88eb0ee2f5">
    <dcterms:modified rdf:resource="rdf:#1db7b0d5-8e3f-47f2-8213-21eae994f284"/>
    <rdf:value>updated curation status</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#336901dc-e9ac-4836-a5ae-49db52fbd01c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#da85d985-7959-487b-bb8f-849fde52af78">
    <vCard:Given>Upinder</vCard:Given>
    <vCard:Family>Bhalla</vCard:Family>
    <vCard:Other>S</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bc78b54e-80cc-4046-8d3f-d6e1882cf042">
    <vCard:Given>Ravi</vCard:Given>
    <vCard:Family>Iyengar</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="#bhalla_model_1999">
  <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>signal_transduction</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>
    <bqs:reference rdf:resource="rdf:#c6899f62-e893-4258-82cc-cd2e40f1d0b1"/>
    <cmeta:comment rdf:resource="rdf:#3f2fcdb8-b8b9-40b7-b89d-078f535ceea9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a089cffb-80af-42d0-9a68-da525b1325b8">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6640444f-bd80-46c2-b4ee-fdc3e743fe01">
    <dc:creator rdf:resource="rdf:#6b555317-c5f9-43b8-a174-8838322ad387"/>
    <dc:title>Emergent Properties of Networks of Biological Signaling Pathways</dc:title>
    <bqs:volume>283</bqs:volume>
    <bqs:first_page>381</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#1611df11-cfb6-4bf9-97f0-ef44ef9fa1e1"/>
    <dcterms:issued rdf:resource="rdf:#d0c1e381-e895-4d1e-954e-bb9aef0bab7f"/>
    <bqs:last_page>387</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ee222338-e436-4cd8-bb4e-42bc8d9e301c">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#51d04247-32a4-419b-92c1-3692cc3a3744">
    <dc:creator rdf:resource="rdf:#a089cffb-80af-42d0-9a68-da525b1325b8"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3f2fcdb8-b8b9-40b7-b89d-078f535ceea9">
    <dc:creator rdf:resource="rdf:#ee222338-e436-4cd8-bb4e-42bc8d9e301c"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#552a58f6-7691-4590-8417-092133421686">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c1388c2c-05d0-465c-8f8b-f14d2b94d47b">
    <vCard:Given>Matthew</vCard:Given>
    <vCard:Family>McCormick</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c6899f62-e893-4258-82cc-cd2e40f1d0b1">
    <bqs:Pubmed_id>9888852</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#6640444f-bd80-46c2-b4ee-fdc3e743fe01"/>
  </rdf:Description>
</rdf:RDF>
</model>