<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 20/06/2007 at 12:39:18 at a.m. using:

COR (0.9.31.649)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="bhalla_model_1999" name="bi_model_1999_version01">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Emergent properties of networks of biological signaling pathways</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This particular version of the CellML model describes the PKC pathway component of the Bhalla-Iyengar model. This model is able to be solved but does not give the correct results as it is not connected to the other modules of the pathway. ValidateCellML verifies this model as valid CellML but detects unit inconsistencies.</para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Many distinct signaling pathways allow the cell to receive, process, and respond to information. Often, components of different pathways interact, resulting in signaling networks. Biochemical signaling networks were constructed with experimentally obtained constants and analyzed by computational methods to understand their role in complex biological processes. These networks exhibit emergent properties such as integration of signals across multiple time scales, generation of distinct outputs depending on input strength and duration, and self-sustaining feedback loops. Feedback can result in bistable behavior with discrete steady-state activities, well-defined input thresholds for transition between states and prolonged signal output, and signal modulation in response to transient stimuli. These properties of signaling networks raise the possibility that information for "learned behavior" of biological systems may be stored within intracellular biochemical reactions that comprise signaling pathways.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Emergent properties of networks of biological signaling pathways. Bhalla US, Iyengar R.
            <emphasis>Science</emphasis> 1999 Jan 15; 283(5400); 381-7.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=9888852&amp;dopt=Abstract">PubMed ID: 9888852</ulink>
</para>


<informalfigure float="0" id="fig_pathway_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="bhalla_iyengar_pkc.png"/>
  </imageobject>
</mediaobject>
<caption>A rendering of the PKC pathway component of the Bhalla-Iyengar model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>



   <units name="s">
      <unit units="second"/>
   </units>
   <units name="per_um_s">
      <unit units="mole" prefix="micro" exponent="-1"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="um">
      <unit units="litre" exponent="-1"/>
      <unit units="mole" prefix="micro"/>
   </units>
   <units name="um_per_s">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="per_s">
      <unit units="s" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="s" public_interface="out" name="t"/>
   </component>
   <component name="PKC">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="per_s" name="kf1" initial_value="1"/>
      <variable units="per_s" name="kb1" initial_value="50"/>
      <variable units="per_um_s" name="kf2" initial_value="0.0000000002"/>
      <variable units="per_s" name="kb2" initial_value="0.1"/>
      <variable units="per_s" name="kf3" initial_value="1.2705"/>
      <variable units="per_s" name="kb3" initial_value="3.5026"/>
      <variable units="per_um_s" name="kf4" initial_value="0.000000002"/>
      <variable units="per_s" name="kb4" initial_value="0.1"/>
      <variable units="per_s" name="kf5" initial_value="1"/>
      <variable units="per_s" name="kb5" initial_value="0.1"/>
      <variable units="per_s" name="kf6" initial_value="2"/>
      <variable units="per_s" name="kb6" initial_value="0.2"/>
      <variable units="per_um_s" name="kf7" initial_value="0.000001"/>
      <variable units="per_s" name="kb7" initial_value="0.5"/>
      <variable units="per_um_s" name="kf8" initial_value="0.000000013333"/>
      <variable units="per_s" name="kb8" initial_value="8.6348"/>
      <variable units="per_um_s" name="kf9" initial_value="0.000000001"/>
      <variable units="per_s" name="kb9" initial_value="0.1"/>
      <variable units="per_um_s" name="kf10" initial_value="0.00000003"/>
      <variable units="per_s" name="kb10" initial_value="2"/>
      <variable units="um" name="PKC_i" initial_value="1"/>
      <variable units="um" name="AA" initial_value="1"/>
      <variable units="um" name="DAG" initial_value="0.1"/>
      <variable units="um" name="Ca" initial_value="0.1"/>
      <variable units="um" name="DAGPKC" initial_value="0"/>
      <variable units="um" name="AADAGPKC" initial_value="0"/>
      <variable units="um" name="DAGCaPKC" initial_value="0"/>
      <variable units="um" name="CaPKC" initial_value="0"/>
      <variable units="um" name="PKC_a" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>PKC_i</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <apply>
                                    <times/>
                                    <apply>
                                       <minus/>
                                       <ci>PKC_i</ci>
                                    </apply>
                                    <ci>kf1</ci>
                                 </apply>
                                 <apply>
                                    <times/>
                                    <ci>PKC_a</ci>
                                    <ci>kb1</ci>
                                 </apply>
                              </apply>
                              <apply>
                                 <times/>
                                 <ci>PKC_i</ci>
                                 <ci>AA</ci>
                                 <ci>kf2</ci>
                              </apply>
                           </apply>
                           <apply>
                              <times/>
                              <ci>PKC_a</ci>
                              <ci>kb2</ci>
                           </apply>
                        </apply>
                        <apply>
                           <times/>
                           <ci>PKC_i</ci>
                           <ci>DAG</ci>
                           <ci>kf9</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>DAGPKC</ci>
                        <ci>kb9</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>PKC_i</ci>
                     <ci>Ca</ci>
                     <ci>kf7</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>CaPKC</ci>
                  <ci>kb7</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>DAGPKC</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>PKC_i</ci>
                        <ci>DAG</ci>
                        <ci>kf9</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>DAGPKC</ci>
                        <ci>kb9</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>DAGPKC</ci>
                     <ci>AA</ci>
                     <ci>kf10</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>AADAGPKC</ci>
                  <ci>kb10</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>AADAGPKC</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>DAGPKC</ci>
                        <ci>AA</ci>
                        <ci>kf10</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>AADAGPKC</ci>
                        <ci>kb10</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>AADAGPKC</ci>
                     <ci>kf6</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>PKC_a</ci>
                  <ci>kb6</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>CaPKC</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <apply>
                              <minus/>
                              <apply>
                                 <minus/>
                                 <apply>
                                    <times/>
                                    <ci>PKC_i</ci>
                                    <ci>Ca</ci>
                                    <ci>kf7</ci>
                                 </apply>
                                 <apply>
                                    <times/>
                                    <ci>CaPKC</ci>
                                    <ci>kb7</ci>
                                 </apply>
                              </apply>
                              <apply>
                                 <times/>
                                 <ci>CaPKC</ci>
                                 <ci>kf3</ci>
                              </apply>
                           </apply>
                           <apply>
                              <times/>
                              <ci>PKC_a</ci>
                              <ci>kb3</ci>
                           </apply>
                        </apply>
                        <apply>
                           <times/>
                           <ci>CaPKC</ci>
                           <ci>AA</ci>
                           <ci>kf4</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>PKC_a</ci>
                        <ci>kb4</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>DAG</ci>
                     <ci>CaPKC</ci>
                     <ci>kf8</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>DAGCaPKC</ci>
                  <ci>kb8</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>DAGCaPKC</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>DAG</ci>
                        <ci>CaPKC</ci>
                        <ci>kf8</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>DAGCaPKC</ci>
                        <ci>kb8</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>DAGCaPKC</ci>
                     <ci>kf5</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>PKC_a</ci>
                  <ci>kb5</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>PKC_a</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <apply>
                                 <minus/>
                                 <apply>
                                    <plus/>
                                    <apply>
                                       <minus/>
                                       <apply>
                                          <plus/>
                                          <apply>
                                             <minus/>
                                             <apply>
                                                <times/>
                                                <ci>PKC_i</ci>
                                                <ci>kf1</ci>
                                             </apply>
                                             <apply>
                                                <times/>
                                                <ci>PKC_a</ci>
                                                <ci>kb1</ci>
                                             </apply>
                                          </apply>
                                          <apply>
                                             <times/>
                                             <ci>PKC_i</ci>
                                             <ci>AA</ci>
                                             <ci>kf2</ci>
                                          </apply>
                                       </apply>
                                       <apply>
                                          <times/>
                                          <ci>PKC_a</ci>
                                          <ci>kb2</ci>
                                       </apply>
                                    </apply>
                                    <apply>
                                       <times/>
                                       <ci>CaPKC</ci>
                                       <ci>kf3</ci>
                                    </apply>
                                 </apply>
                                 <apply>
                                    <times/>
                                    <ci>PKC_a</ci>
                                    <ci>kb3</ci>
                                 </apply>
                              </apply>
                              <apply>
                                 <times/>
                                 <ci>CaPKC</ci>
                                 <ci>AA</ci>
                                 <ci>kf4</ci>
                              </apply>
                           </apply>
                           <apply>
                              <times/>
                              <ci>PKC_a</ci>
                              <ci>kb4</ci>
                           </apply>
                        </apply>
                        <apply>
                           <times/>
                           <ci>DAGCaPKC</ci>
                           <ci>kf5</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>PKC_a</ci>
                        <ci>kb5</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>AADAGPKC</ci>
                     <ci>kf6</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>PKC_a</ci>
                  <ci>kb6</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>AA</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <apply>
                              <times/>
                              <apply>
                                 <minus/>
                                 <ci>PKC_i</ci>
                              </apply>
                              <ci>AA</ci>
                              <ci>kf2</ci>
                           </apply>
                           <apply>
                              <times/>
                              <ci>PKC_a</ci>
                              <ci>kb2</ci>
                           </apply>
                        </apply>
                        <apply>
                           <times/>
                           <ci>CaPKC</ci>
                           <ci>AA</ci>
                           <ci>kf4</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>PKC_a</ci>
                        <ci>kb4</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>DAGPKC</ci>
                     <ci>AA</ci>
                     <ci>kf10</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>AADAGPKC</ci>
                  <ci>kb10</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>DAG</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <ci>PKC_i</ci>
                        </apply>
                        <ci>DAG</ci>
                        <ci>kf9</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>DAGPKC</ci>
                        <ci>kb9</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>DAG</ci>
                     <ci>CaPKC</ci>
                     <ci>kf8</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>DAGCaPKC</ci>
                  <ci>kb8</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Ca</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>PKC_i</ci>
                  </apply>
                  <ci>Ca</ci>
                  <ci>kf7</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>CaPKC</ci>
                  <ci>kb7</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_2="environment" component_1="PKC"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>


<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#97ad8644-15a8-4799-a210-9c3036813ad2">
    <rdf:li rdf:resource="rdf:#584e0e42-8a94-4308-b77c-92e0e57c69e1"/>
    <rdf:li rdf:resource="rdf:#c07d49d5-17b2-4112-bfb3-804553a6625b"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#f2634efc-ea96-4619-94e3-9014202b3597">
    <vCard:Given>Ravi</vCard:Given>
    <vCard:Family>Iyengar</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="">
  <dc:title>PKC pathway component of the Bhalla-Iyengar model</dc:title>
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#182140b3-3916-412d-80d0-9801ddf4e25b"/>
    <dcterms:created rdf:resource="rdf:#0f73f614-8adb-4cbe-90d7-d35dc0aed11b"/>
    <dc:creator rdf:resource="rdf:#3cc99a90-f1ee-4159-8c3f-ebe36c461186"/>
    <cmeta:modification rdf:resource="rdf:#7f049282-49bc-458c-aafc-2c32e8307b0c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c3d3b02c-72ff-4f31-8deb-1c8b20d4257b">
    <vCard:N rdf:resource="rdf:#c389b499-6411-405b-b491-6c77b23785f9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ff2e7977-9fb7-4af8-be69-f75e8fa5cea1">
    <vCard:Given>Upinder</vCard:Given>
    <vCard:Family>Bhalla</vCard:Family>
    <vCard:Other>S</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7f049282-49bc-458c-aafc-2c32e8307b0c">
    <dcterms:modified rdf:resource="rdf:#db26f6ef-4ee4-4815-8739-6bc2c0ea8f53"/>
    <rdf:value>updated curation status</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#c3d3b02c-72ff-4f31-8deb-1c8b20d4257b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0f73f614-8adb-4cbe-90d7-d35dc0aed11b">
    <dcterms:W3CDTF>2007-08-28T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#adce73c7-977d-4ea7-a8a1-c73ad7e5547c">
    <bqs:Pubmed_id>9888852</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#9e49b7d0-7716-4536-8199-1a800fc4fc13"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bdbf4c17-710f-4d17-b18a-87fa172e431d">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9e49b7d0-7716-4536-8199-1a800fc4fc13">
    <dc:creator rdf:resource="rdf:#97ad8644-15a8-4799-a210-9c3036813ad2"/>
    <dc:title>Emergent Properties of Networks of Biological Signaling Pathways</dc:title>
    <bqs:volume>283</bqs:volume>
    <bqs:first_page>381</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#43485f5a-630e-47d2-81c5-a5b629ad788a"/>
    <dcterms:issued rdf:resource="rdf:#86272f77-bb87-4283-b745-e89f27f5165c"/>
    <bqs:last_page>387</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#182140b3-3916-412d-80d0-9801ddf4e25b">
    <dc:creator rdf:resource="rdf:#5c2f2c58-185f-4e73-b389-c82edb977fe0"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a7e69ad5-407b-40f6-9347-70dbc682e45f">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#43485f5a-630e-47d2-81c5-a5b629ad788a">
    <dc:title>Science</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3cc99a90-f1ee-4159-8c3f-ebe36c461186">
    <vCard:ORG rdf:resource="rdf:#bdbf4c17-710f-4d17-b18a-87fa172e431d"/>
    <vCard:EMAIL rdf:resource="rdf:#9553bbd3-17e8-47e9-8af0-0df362397165"/>
    <vCard:N rdf:resource="rdf:#53c3ee28-e280-4fd0-8c31-4328cea835df"/>
  </rdf:Description>
  <rdf:Description rdf:about="#bhalla_model_1999">
  <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>signal_transduction</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>
    <bqs:reference rdf:resource="rdf:#adce73c7-977d-4ea7-a8a1-c73ad7e5547c"/>
    <cmeta:comment rdf:resource="rdf:#3b139e70-c266-488a-af34-38d0a30e00e6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3b139e70-c266-488a-af34-38d0a30e00e6">
    <dc:creator rdf:resource="rdf:#a7e69ad5-407b-40f6-9347-70dbc682e45f"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c07d49d5-17b2-4112-bfb3-804553a6625b">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#f2634efc-ea96-4619-94e3-9014202b3597"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#db26f6ef-4ee4-4815-8739-6bc2c0ea8f53">
    <dcterms:W3CDTF>2009-05-27T15:05:05+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#86272f77-bb87-4283-b745-e89f27f5165c">
    <dcterms:W3CDTF>1999-01-15</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c389b499-6411-405b-b491-6c77b23785f9">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9553bbd3-17e8-47e9-8af0-0df362397165">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>m.mccormick@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5c2f2c58-185f-4e73-b389-c82edb977fe0">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#584e0e42-8a94-4308-b77c-92e0e57c69e1">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#ff2e7977-9fb7-4af8-be69-f75e8fa5cea1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#53c3ee28-e280-4fd0-8c31-4328cea835df">
    <vCard:Given>Matthew</vCard:Given>
    <vCard:Family>McCormick</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
</rdf:RDF>
</model>