<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  bi_PLC_beta_pathway_1999.xml

CREATED :  6th November 2001

LAST MODIFIED : 9th April 2003

AUTHOR :  Catherine Lloyd
          Department of Engineering Science
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of the PLC-beta pathway
model from Bhalla and Iyengar (1999).  

CHANGES:  
  22/01/2002 - AAC - Updated metadata to conform to the 16/1/02 CellML Metadata
                     1.0 Specification.
  18/07/2002 - CML - Added more metadata.
  09/04/2003 - AAC - Added publication date information.  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="bhalla_model_1999" name="bhalla_model_1999">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>The Phospholipase C (PLC) (beta) Pathway Model from Bhalla and Iyengar</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This version of the CellML model describes the PLC (beta) pathway component of the Bhalla-Iyengar model. This model is able to be solved but does not give the correct results as it is not connected to the other modules of the pathway. ValidateCellML verifies this model as valid CellML but detects unit inconsistencies.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Many distinct signaling pathways allow the cell to receive, process, and respond to information. Often, components of different pathways interact, resulting in signaling networks. Biochemical signaling networks were constructed with experimentally obtained constants and analyzed by computational methods to understand their role in complex biological processes. These networks exhibit emergent properties such as integration of signals across multiple time scales, generation of distinct outputs depending on input strength and duration, and self-sustaining feedback loops. Feedback can result in bistable behavior with discrete steady-state activities, well-defined input thresholds for transition between states and prolonged signal output, and signal modulation in response to transient stimuli. These properties of signaling networks raise the possibility that information for "learned behavior" of biological systems may be stored within intracellular biochemical reactions that comprise signaling pathways.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Emergent properties of networks of biological signaling pathways. Bhalla US, Iyengar R.
            <emphasis>Science</emphasis> 1999 Jan 15; 283(5400); 381-7.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=9888852&amp;dopt=Abstract">PubMed ID: 9888852</ulink>
</para>



<informalfigure float="0" id="fig_pathway_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="bhalla_iyengar_PLC_beta_1999.png"/>
  </imageobject>
</mediaobject>
<caption>A rendering of the PLC (beta) pathway component of the Bhalla-Iyengar model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  <!--
    We start the model definition with a definition of some named
    sets of units for use throughout the model.
  -->
  <units name="micromolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>

  <units name="flux">
    <unit units="micromolar"/>
    <unit units="second" exponent="-1"/>
  </units>

  <units name="first_order_rate_constant_units">
    <unit units="second" exponent="-1"/>
  </units>

  <units name="second_order_rate_constant_units">
    <unit units="micromolar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>
   
  <component name="global_variables">
    <variable units="second" public_interface="out" name="time"/>
  </component>

  <component cmeta:id="DAG" name="DAG">
    
    <variable units="micromolar" public_interface="out" name="DAG"/>
    <variable units="flux" public_interface="in" name="delta_DAG_rxn2"/>
    <variable units="flux" public_interface="in" name="delta_DAG_rxn3"/>
    <variable units="flux" public_interface="in" name="delta_DAG_rxn0"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>DAG</ci>
        </apply>
        <apply>
          <plus/>
          <ci>delta_DAG_rxn2</ci>
          <ci>delta_DAG_rxn3</ci>
          <ci>delta_DAG_rxn0</ci>
        </apply>
      </apply>
    </math>
  </component>

  <component name="PC">
    <variable units="micromolar" public_interface="out" name="PC"/>
    <variable units="flux" public_interface="in" name="delta_PC_rxn0"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>PC</ci>
        </apply>
        <ci>delta_PC_rxn0</ci>
      </apply>
    </math>
  </component>

  <component cmeta:id="IP3" name="IP3">
    
    <variable units="micromolar" public_interface="out" name="IP3"/>
    <variable units="flux" public_interface="in" name="delta_IP3_rxn2"/>
    <variable units="flux" public_interface="in" name="delta_IP3_rxn3"/>
    <variable units="flux" public_interface="in" name="delta_IP3_rxn1"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>IP3</ci>
        </apply>
        <apply>
          <plus/>
          <ci>delta_IP3_rxn2</ci>
          <ci>delta_IP3_rxn3</ci>
          <ci>delta_IP3_rxn1</ci>
        </apply>
      </apply>
    </math>
  </component>

  <component name="Inositol">
    <variable units="micromolar" public_interface="out" name="Inositol"/>
    <variable units="flux" public_interface="in" name="delta_Inositol_rxn1"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Inositol</ci>
        </apply>
        <ci>delta_Inositol_rxn1</ci>
      </apply>
    </math>
  </component>

  <component cmeta:id="PLC" name="PLC">
    
    <variable units="micromolar" public_interface="out" name="PLC" initial_value="0.8"/>
    <variable units="flux" public_interface="in" name="delta_PLC_rxn4"/>
    <variable units="flux" public_interface="in" name="delta_PLC_rxn5"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>PLC</ci>
        </apply>
        <apply>
          <plus/>
          <ci>delta_PLC_rxn4</ci>
          <ci>delta_PLC_rxn5</ci>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="Ca" name="Ca">
    
    <variable units="micromolar" public_interface="out" name="Ca" initial_value="1.0"/>
    <variable units="flux" public_interface="in" name="delta_Ca_rxn4"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Ca</ci>
        </apply>
        <ci>delta_Ca_rxn4</ci>
      </apply>
    </math>
  </component>

  <component name="Ca_PLC">
    <variable units="micromolar" public_interface="out" name="Ca_PLC"/>
    <variable units="flux" public_interface="in" name="delta_Ca_PLC_rxn4"/>
    <variable units="flux" public_interface="in" name="delta_Ca_PLC_rxn8"/>
    <variable units="flux" public_interface="in" name="delta_Ca_PLC_rxn7"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Ca_PLC</ci>
        </apply>
        <apply>
          <plus/>
          <ci>delta_Ca_PLC_rxn4</ci>
          <ci>delta_Ca_PLC_rxn8</ci>
          <ci>delta_Ca_PLC_rxn7</ci>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="PIP2" name="PIP2">
    
    <variable units="micromolar" public_interface="out" name="PIP2" initial_value="10.0"/>
    <variable units="flux" public_interface="in" name="delta_PIP2_rxn2"/>
    <variable units="flux" public_interface="in" name="delta_PIP2_rxn3"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>PIP2</ci>
        </apply>
        <apply>
          <plus/>
          <ci>delta_PIP2_rxn2</ci>
          <ci>delta_PIP2_rxn3</ci>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="Gq" name="Gq">
    
    <variable units="micromolar" public_interface="out" name="Gq" initial_value="1.0"/>
    <variable units="flux" public_interface="in" name="delta_Gq_rxn8"/>
    <variable units="flux" public_interface="in" name="delta_Gq_rxn5"/>
    <variable units="flux" public_interface="in" name="delta_Gq_rxn6"/>
    <variable units="flux" public_interface="in" name="delta_Gq_rxn7"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Gq</ci>
        </apply>
        <apply>
          <plus/>
          <ci>delta_Gq_rxn8</ci>
          <ci>delta_Gq_rxn5</ci>
          <ci>delta_Gq_rxn6</ci>
          <ci>delta_Gq_rxn7</ci>
        </apply>
      </apply>
    </math>
  </component>

  <component name="Gq_PLC">
    <variable units="micromolar" public_interface="out" name="Gq_PLC"/>
    <variable units="flux" public_interface="in" name="delta_Gq_PLC_rxn5"/>
    <variable units="flux" public_interface="in" name="delta_Gq_PLC_rxn6"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Gq_PLC</ci>
        </apply>
        <apply>
          <plus/>
          <ci>delta_Gq_PLC_rxn5</ci>
          <ci>delta_Gq_PLC_rxn6</ci>
        </apply>
      </apply>
    </math>
  </component>

  <component name="Ca_Gq_PLC">
    <variable units="micromolar" public_interface="out" name="Ca_Gq_PLC" initial_value="1.0"/>
    <variable units="flux" public_interface="in" name="delta_Ca_Gq_PLC_rxn6"/>
    <variable units="flux" public_interface="in" name="delta_Ca_Gq_PLC_rxn7"/>
    <variable units="flux" public_interface="in" name="delta_Ca_Gq_PLC_rxn8"/>
    <variable units="second" public_interface="in" name="time"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Ca_Gq_PLC</ci>
        </apply>
        <apply>
          <plus/>
          <ci>delta_Ca_Gq_PLC_rxn6</ci>
          <ci>delta_Ca_Gq_PLC_rxn7</ci>
          <ci>delta_Ca_Gq_PLC_rxn8</ci>
        </apply>
      </apply>
    </math>
  </component>

  <component name="reaction0">
    <variable units="micromolar" public_interface="in" name="DAG"/>
    <variable units="micromolar" public_interface="in" name="PC"/>
    <variable units="flux" public_interface="out" name="delta_DAG_rxn0"/>
    <variable units="flux" public_interface="out" name="delta_PC_rxn0"/>
    <variable units="first_order_rate_constant_units" name="k0" initial_value="0.15"/>
    <variable units="flux" name="rate"/>
    <reaction reversible="no">
      <variable_ref variable="DAG">
        <role stoichiometry="1" delta_variable="delta_DAG_rxn0" role="reactant"/>
      </variable_ref>
      <variable_ref variable="PC">
        <role stoichiometry="1" delta_variable="delta_PC_rxn0" role="product"/>
      </variable_ref>
      <variable_ref variable="rate">
        <role role="rate">
          <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
              <eq/>
              <ci>rate</ci>
              <apply>
                <times/>
                <ci>k0</ci>
                <ci>DAG</ci>
              </apply>
            </apply>
          </math>
        </role>
      </variable_ref>
    </reaction>
  </component>

  <component name="reaction1">
    <variable units="micromolar" public_interface="in" name="IP3"/>
    <variable units="micromolar" public_interface="in" name="Inositol"/>
    <variable units="flux" public_interface="out" name="delta_IP3_rxn1"/>
    <variable units="flux" public_interface="out" name="delta_Inositol_rxn1"/>
    <variable units="first_order_rate_constant_units" name="k1" initial_value="2.5"/>
    <variable units="flux" name="rate"/>
    <reaction reversible="no">
      <variable_ref variable="IP3">
        <role stoichiometry="1" delta_variable="delta_IP3_rxn1" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Inositol">
        <role stoichiometry="1" delta_variable="delta_Inositol_rxn1" role="product"/>
      </variable_ref>
      <variable_ref variable="rate">
        <role role="rate">
          <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
              <eq/>
              <ci>rate</ci>
              <apply>
                <times/>
                <ci>k1</ci>
                <ci>IP3</ci>
              </apply>
            </apply>
          </math>
        </role>
      </variable_ref>
    </reaction>
  </component>

  <component name="reaction2">
    <variable units="micromolar" public_interface="in" name="PIP2"/>
    <variable units="micromolar" public_interface="in" name="DAG"/>
    <variable units="micromolar" public_interface="in" name="IP3"/>
    <variable units="micromolar" public_interface="in" name="Ca_PLC"/>
    <variable units="flux" public_interface="out" name="delta_PIP2_rxn2"/>
    <variable units="flux" public_interface="out" name="delta_DAG_rxn2"/>
    <variable units="flux" public_interface="out" name="delta_IP3_rxn2"/>
    <variable units="micromolar" name="km2" initial_value="5.0"/>
    <variable units="first_order_rate_constant_units" name="vmax2" initial_value="48.0"/>
    <variable units="flux" name="rate"/>
    <reaction reversible="no">
      <variable_ref variable="PIP2">
        <role stoichiometry="1" delta_variable="delta_PIP2_rxn2" role="reactant"/>
      </variable_ref>
      <variable_ref variable="DAG">
        <role stoichiometry="1" delta_variable="delta_DAG_rxn2" role="product"/>
      </variable_ref>
      <variable_ref variable="IP3">
        <role stoichiometry="1" delta_variable="delta_IP3_rxn2" role="product"/>
      </variable_ref>
      <variable_ref variable="Ca_PLC">
        <role role="catalyst"/>
      </variable_ref>
      <variable_ref variable="rate">
        <role role="rate">
          <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
              <eq/>
              <ci>rate</ci>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci>PIP2</ci>
                  <ci>vmax2</ci>
                </apply>
                <apply>
                  <plus/>
                  <ci>km2</ci>
                  <ci>PIP2</ci>
                </apply>
              </apply>
            </apply>
          </math>
        </role>
      </variable_ref>
    </reaction>
  </component>

  <component name="reaction3">
    <variable units="micromolar" public_interface="in" name="PIP2"/>
    <variable units="micromolar" public_interface="in" name="DAG"/>
    <variable units="micromolar" public_interface="in" name="IP3"/>
    <variable units="micromolar" public_interface="in" name="Ca_Gq_PLC"/>
    <variable units="flux" public_interface="out" name="delta_PIP2_rxn3"/>
    <variable units="flux" public_interface="out" name="delta_DAG_rxn3"/>
    <variable units="flux" public_interface="out" name="delta_IP3_rxn3"/>
    <variable units="micromolar" name="km3" initial_value="19.84166667"/>
    <variable units="first_order_rate_constant_units" name="vmax3" initial_value="10.0"/>
    <variable units="flux" name="rate"/>
    <reaction reversible="no">
      <variable_ref variable="PIP2">
        <role stoichiometry="1" delta_variable="delta_PIP2_rxn3" role="reactant"/>
      </variable_ref>
      <variable_ref variable="DAG">
        <role stoichiometry="1" delta_variable="delta_DAG_rxn3" role="product"/>
      </variable_ref>
      <variable_ref variable="IP3">
        <role stoichiometry="1" delta_variable="delta_IP3_rxn3" role="product"/>
      </variable_ref>
      <variable_ref variable="Ca_Gq_PLC">
        <role role="catalyst"/>
      </variable_ref>
      <variable_ref variable="rate">
        <role role="rate">
          <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
              <eq/>
              <ci>rate</ci>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci>PIP2</ci>
                  <ci>vmax3</ci>
                </apply>
                <apply>
                  <plus/>
                  <ci>km3</ci>
                  <ci>PIP2</ci>
                </apply>
              </apply>
            </apply>
          </math>
        </role>
      </variable_ref>
    </reaction>
  </component>

  <component name="reaction4">
    <variable units="micromolar" public_interface="in" name="PLC"/>
    <variable units="micromolar" public_interface="in" name="Ca"/>
    <variable units="micromolar" public_interface="in" name="Ca_PLC"/>
    <variable units="flux" public_interface="out" name="delta_PLC_rxn4"/>
    <variable units="flux" public_interface="out" name="delta_Ca_rxn4"/>
    <variable units="flux" public_interface="out" name="delta_Ca_PLC_rxn4"/>
    <variable units="second_order_rate_constant_units" name="k4" initial_value="0.000005"/>
    <variable units="first_order_rate_constant_units" name="k4_" initial_value="1.0"/>
    <variable units="flux" name="rate"/>
    <reaction reversible="yes">
      <variable_ref variable="PLC">
        <role stoichiometry="1" direction="forward" delta_variable="delta_PLC_rxn4" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Ca">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Ca_rxn4" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Ca_PLC">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Ca_PLC_rxn4" role="product"/>
      </variable_ref>
      <variable_ref variable="rate">
        <role role="rate">
          <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
              <eq/>
              <ci>rate</ci>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci>k4</ci>
                  <ci>PLC</ci>
                  <ci>Ca</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <ci>k4_</ci>
                    <ci>Ca_PLC</ci>
                  </apply>
                </apply>
              </apply>
            </apply>
          </math>
        </role>
      </variable_ref>
    </reaction>
  </component>

  <component name="reaction5">
    <variable units="micromolar" public_interface="in" name="PLC"/>
    <variable units="micromolar" public_interface="in" name="Gq"/>
    <variable units="micromolar" public_interface="in" name="Gq_PLC"/>
    <variable units="flux" public_interface="out" name="delta_PLC_rxn5"/>
    <variable units="flux" public_interface="out" name="delta_Gq_rxn5"/>
    <variable units="flux" public_interface="out" name="delta_Gq_PLC_rxn5"/>
    <variable units="second_order_rate_constant_units" name="k5" initial_value="0.0000042"/>
    <variable units="first_order_rate_constant_units" name="k5_" initial_value="1.0"/>
    <variable units="flux" name="rate"/>
    <reaction reversible="yes">
      <variable_ref variable="PLC">
        <role stoichiometry="1" direction="forward" delta_variable="delta_PLC_rxn5" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Gq">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Gq_rxn5" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Gq_PLC">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Gq_PLC_rxn5" role="product"/>
      </variable_ref>
      <variable_ref variable="rate">
        <role role="rate">
          <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
              <eq/>
              <ci>rate</ci>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci>k5</ci>
                  <ci>PLC</ci>
                  <ci>Gq</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <ci>k5_</ci>
                    <ci>Gq_PLC</ci>
                  </apply>
                </apply>
              </apply>
            </apply>
          </math>
        </role>
      </variable_ref>
    </reaction>
  </component>

  <component name="reaction6">
    <variable units="micromolar" public_interface="in" name="Gq"/>
    <variable units="micromolar" public_interface="in" name="Gq_PLC"/>
    <variable units="micromolar" public_interface="in" name="Ca_Gq_PLC"/>
    <variable units="flux" public_interface="out" name="delta_Gq_rxn6"/>
    <variable units="flux" public_interface="out" name="delta_Gq_PLC_rxn6"/>
    <variable units="flux" public_interface="out" name="delta_Ca_Gq_PLC_rxn6"/>
    <variable units="second_order_rate_constant_units" name="k6" initial_value="0.00005"/>
    <variable units="first_order_rate_constant_units" name="k6_" initial_value="1.0"/>
    <variable units="flux" name="rate"/>
    <reaction reversible="yes">
      <variable_ref variable="Gq">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Gq_rxn6" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Gq_PLC">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Gq_PLC_rxn6" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Ca_Gq_PLC">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Ca_Gq_PLC_rxn6" role="product"/>
      </variable_ref>
      <variable_ref variable="rate">
        <role role="rate">
          <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
              <eq/>
              <ci>rate</ci>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci>k6</ci>
                  <ci>Gq</ci>
                  <ci>Gq_PLC</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <ci>k6_</ci>
                    <ci>Ca_Gq_PLC</ci>
                  </apply>
                </apply>
              </apply>
            </apply>
          </math>
        </role>
      </variable_ref>
    </reaction>
  </component>

  <component name="reaction7">
    <variable units="micromolar" public_interface="in" name="Ca_PLC"/>
    <variable units="micromolar" public_interface="in" name="Gq"/>
    <variable units="micromolar" public_interface="in" name="Ca_Gq_PLC"/>
    <variable units="flux" public_interface="out" name="delta_Ca_PLC_rxn7"/>
    <variable units="flux" public_interface="out" name="delta_Gq_rxn7"/>
    <variable units="flux" public_interface="out" name="delta_Ca_Gq_PLC_rxn7"/>
    <variable units="second_order_rate_constant_units" name="k7" initial_value="0.000042"/>
    <variable units="first_order_rate_constant_units" name="k7_" initial_value="1.0"/>
    <variable units="flux" name="rate"/>
    <reaction reversible="yes">
      <variable_ref variable="Ca_PLC">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Ca_PLC_rxn7" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Gq">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Gq_rxn7" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Ca_Gq_PLC">
        <role stoichiometry="1" direction="forward" delta_variable="delta_Ca_Gq_PLC_rxn7" role="product"/>
      </variable_ref>
      <variable_ref variable="rate">
        <role role="rate">
          <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
              <eq/>
              <ci>rate</ci>
              <apply>
                <plus/>
                <apply>
                  <times/>
                  <ci>k7</ci>
                  <ci>Ca_PLC</ci>
                  <ci>Gq</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <ci>k7_</ci>
                    <ci>Ca_Gq_PLC</ci>
                  </apply>
                </apply>
              </apply>
            </apply>
          </math>
        </role>
      </variable_ref>
    </reaction>
  </component>

  <component name="reaction8">
    <variable units="micromolar" public_interface="in" name="Ca_Gq_PLC"/>
    <variable units="micromolar" public_interface="in" name="Ca_PLC"/>
    <variable units="micromolar" public_interface="in" name="Gq"/>
    <variable units="flux" public_interface="out" name="delta_Ca_Gq_PLC_rxn8"/>
    <variable units="flux" public_interface="out" name="delta_Ca_PLC_rxn8"/>
    <variable units="flux" public_interface="out" name="delta_Gq_rxn8"/>
    <variable units="first_order_rate_constant_units" name="k8" initial_value="0.0133"/>
    <variable units="flux" name="rate"/>
    <reaction reversible="no">
      <variable_ref variable="Ca_Gq_PLC">
        <role stoichiometry="1" delta_variable="delta_Ca_Gq_PLC_rxn8" role="reactant"/>
      </variable_ref>
      <variable_ref variable="Ca_PLC">
        <role stoichiometry="1" delta_variable="delta_Ca_PLC_rxn8" role="product"/>
      </variable_ref>
      <variable_ref variable="Gq">
        <role stoichiometry="1" delta_variable="delta_Gq_rxn8" role="product"/>
      </variable_ref>
      <variable_ref variable="rate">
        <role role="rate">
          <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
              <eq/>
              <ci>rate</ci>
              <apply>
                <times/>
                <ci>k8</ci>
                <ci>Ca_Gq_PLC</ci>
              </apply>
            </apply>
          </math>
        </role>
      </variable_ref>
    </reaction>
  </component>

  <connection>
    <map_components component_2="reaction2" component_1="DAG"/>
    <map_variables variable_2="DAG" variable_1="DAG"/>
    <map_variables variable_2="delta_DAG_rxn2" variable_1="delta_DAG_rxn2"/>
  </connection>

  <connection>
    <map_components component_2="reaction3" component_1="DAG"/>
    <map_variables variable_2="DAG" variable_1="DAG"/>
    <map_variables variable_2="delta_DAG_rxn3" variable_1="delta_DAG_rxn3"/>
  </connection>

  <connection>
    <map_components component_2="reaction0" component_1="DAG"/>
    <map_variables variable_2="DAG" variable_1="DAG"/>
    <map_variables variable_2="delta_DAG_rxn0" variable_1="delta_DAG_rxn0"/>
  </connection>

  <connection>
    <map_components component_2="reaction0" component_1="PC"/>
    <map_variables variable_2="PC" variable_1="PC"/>
    <map_variables variable_2="delta_PC_rxn0" variable_1="delta_PC_rxn0"/>
  </connection>

  <connection>
    <map_components component_2="reaction2" component_1="IP3"/>
    <map_variables variable_2="IP3" variable_1="IP3"/>
    <map_variables variable_2="delta_IP3_rxn2" variable_1="delta_IP3_rxn2"/>
  </connection>

  <connection>
    <map_components component_2="reaction3" component_1="IP3"/>
    <map_variables variable_2="IP3" variable_1="IP3"/>
    <map_variables variable_2="delta_IP3_rxn3" variable_1="delta_IP3_rxn3"/>
  </connection>

  <connection>
    <map_components component_2="reaction1" component_1="IP3"/>
    <map_variables variable_2="IP3" variable_1="IP3"/>
    <map_variables variable_2="delta_IP3_rxn1" variable_1="delta_IP3_rxn1"/>
  </connection>

  <connection>
    <map_components component_2="reaction1" component_1="Inositol"/>
    <map_variables variable_2="Inositol" variable_1="Inositol"/>
    <map_variables variable_2="delta_Inositol_rxn1" variable_1="delta_Inositol_rxn1"/>
  </connection>

  <connection>
    <map_components component_2="reaction4" component_1="PLC"/>
    <map_variables variable_2="PLC" variable_1="PLC"/>
    <map_variables variable_2="delta_PLC_rxn4" variable_1="delta_PLC_rxn4"/>
  </connection>

  <connection>
    <map_components component_2="reaction5" component_1="PLC"/>
    <map_variables variable_2="PLC" variable_1="PLC"/>
    <map_variables variable_2="delta_PLC_rxn5" variable_1="delta_PLC_rxn5"/>
  </connection>

  <connection>
    <map_components component_2="reaction4" component_1="Ca"/>
    <map_variables variable_2="Ca" variable_1="Ca"/>
    <map_variables variable_2="delta_Ca_rxn4" variable_1="delta_Ca_rxn4"/>
  </connection>

  <connection>
    <map_components component_2="reaction4" component_1="Ca_PLC"/>
    <map_variables variable_2="Ca_PLC" variable_1="Ca_PLC"/>
    <map_variables variable_2="delta_Ca_PLC_rxn4" variable_1="delta_Ca_PLC_rxn4"/>
  </connection>

  <connection>
    <map_components component_2="reaction8" component_1="Ca_PLC"/>
    <map_variables variable_2="Ca_PLC" variable_1="Ca_PLC"/>
    <map_variables variable_2="delta_Ca_PLC_rxn8" variable_1="delta_Ca_PLC_rxn8"/>
  </connection>

  <connection>
    <map_components component_2="reaction7" component_1="Ca_PLC"/>
    <map_variables variable_2="Ca_PLC" variable_1="Ca_PLC"/>
    <map_variables variable_2="delta_Ca_PLC_rxn7" variable_1="delta_Ca_PLC_rxn7"/>
  </connection>

  <connection>
    <map_components component_2="reaction2" component_1="Ca_PLC"/>
    <map_variables variable_2="Ca_PLC" variable_1="Ca_PLC"/>
  </connection>

  <connection>
    <map_components component_2="reaction2" component_1="PIP2"/>
    <map_variables variable_2="PIP2" variable_1="PIP2"/>
    <map_variables variable_2="delta_PIP2_rxn2" variable_1="delta_PIP2_rxn2"/>
  </connection>

  <connection>
    <map_components component_2="reaction3" component_1="PIP2"/>
    <map_variables variable_2="PIP2" variable_1="PIP2"/>
    <map_variables variable_2="delta_PIP2_rxn3" variable_1="delta_PIP2_rxn3"/>
  </connection>

  <connection>
    <map_components component_2="reaction8" component_1="Gq"/>
    <map_variables variable_2="Gq" variable_1="Gq"/>
    <map_variables variable_2="delta_Gq_rxn8" variable_1="delta_Gq_rxn8"/>
  </connection>

  <connection>
    <map_components component_2="reaction5" component_1="Gq"/>
    <map_variables variable_2="Gq" variable_1="Gq"/>
    <map_variables variable_2="delta_Gq_rxn5" variable_1="delta_Gq_rxn5"/>
  </connection>

  <connection>
    <map_components component_2="reaction6" component_1="Gq"/>
    <map_variables variable_2="Gq" variable_1="Gq"/>
    <map_variables variable_2="delta_Gq_rxn6" variable_1="delta_Gq_rxn6"/>
  </connection>

  <connection>
    <map_components component_2="reaction7" component_1="Gq"/>
    <map_variables variable_2="Gq" variable_1="Gq"/>
    <map_variables variable_2="delta_Gq_rxn7" variable_1="delta_Gq_rxn7"/>
  </connection>

  <connection>
    <map_components component_2="reaction5" component_1="Gq_PLC"/>
    <map_variables variable_2="Gq_PLC" variable_1="Gq_PLC"/>
    <map_variables variable_2="delta_Gq_PLC_rxn5" variable_1="delta_Gq_PLC_rxn5"/>
  </connection>

  <connection>
    <map_components component_2="reaction6" component_1="Gq_PLC"/>
    <map_variables variable_2="Gq_PLC" variable_1="Gq_PLC"/>
    <map_variables variable_2="delta_Gq_PLC_rxn6" variable_1="delta_Gq_PLC_rxn6"/>
  </connection>

  <connection>
    <map_components component_2="reaction6" component_1="Ca_Gq_PLC"/>
    <map_variables variable_2="Ca_Gq_PLC" variable_1="Ca_Gq_PLC"/>
    <map_variables variable_2="delta_Ca_Gq_PLC_rxn6" variable_1="delta_Ca_Gq_PLC_rxn6"/>
  </connection>

  <connection>
    <map_components component_2="reaction7" component_1="Ca_Gq_PLC"/>
    <map_variables variable_2="Ca_Gq_PLC" variable_1="Ca_Gq_PLC"/>
    <map_variables variable_2="delta_Ca_Gq_PLC_rxn7" variable_1="delta_Ca_Gq_PLC_rxn7"/>
  </connection>

  <connection>
    <map_components component_2="reaction8" component_1="Ca_Gq_PLC"/>
    <map_variables variable_2="Ca_Gq_PLC" variable_1="Ca_Gq_PLC"/>
    <map_variables variable_2="delta_Ca_Gq_PLC_rxn8" variable_1="delta_Ca_Gq_PLC_rxn8"/>
  </connection>

  <connection>
    <map_components component_2="reaction3" component_1="Ca_Gq_PLC"/>
    <map_variables variable_2="Ca_Gq_PLC" variable_1="Ca_Gq_PLC"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="DAG"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="PC"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="IP3"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="Inositol"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="PLC"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="Ca"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="Ca_PLC"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="PIP2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="Gq"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="Gq_PLC"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="global_variables" component_1="Ca_Gq_PLC"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>


<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#d4a1e3e8-bdd2-4778-8711-9c1bd349f333">
    <rdf:li rdf:resource="rdf:#52613714-6246-4707-b530-70ae91b6d008"/>
    <rdf:li rdf:resource="rdf:#05904991-198d-432e-8aad-a676859a6636"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#6da822a7-f1bf-4867-b3df-bbcbb332fc29">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value>signal transduction</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#38257523-7d04-4bed-bfe3-d047d90a0b6c">
    <dcterms:W3CDTF>2001-11-06</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0c4612e9-8ffe-4ee3-bd16-cda5968105bf">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="">
  <dc:title>phospholipase C (PLC) pathway component of the Bhalla-Iyengar model</dc:title>
    <dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
    <dcterms:created rdf:resource="rdf:#38257523-7d04-4bed-bfe3-d047d90a0b6c"/>
    <dc:creator rdf:resource="rdf:#49b060ed-78c7-46e6-b876-5c6aa2c53f76"/>
  </rdf:Description>
  <rdf:Description rdf:about="#IP3">
    <dcterms:alternative>inositol-1,4,5-phosphate</dcterms:alternative>
    <dc:title>IP3</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#Ca">
    <dcterms:alternative>calcium</dcterms:alternative>
    <dc:title>Ca</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#52613714-6246-4707-b530-70ae91b6d008">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#0cf7313e-bf57-41a1-8616-bda1b637665e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#55a2793b-eddb-4002-bea3-e777f38e8a9d">
    <dc:creator rdf:resource="rdf:#0c4612e9-8ffe-4ee3-bd16-cda5968105bf"/>
    <rdf:value>
          This is the CellML description of Bhalla and Iyengar's mathematical   
          model of the phospholipase C (PLC) pathway (1999).  
        </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6bd45351-2aad-413a-8d7c-817930e6adbc">
    <dcterms:W3CDTF>1999-01-15</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#Gq">
    <dcterms:alternative>G-substrate</dcterms:alternative>
    <dc:title>Gq</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#88b63fa6-2d38-40d4-b22f-fb8b018ca5a5">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Research Group</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#37542cf1-6523-483d-81dc-d50d5a96c6c2">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ec46a1d0-fde9-4720-9fd4-b21e6949cec2">
    <dc:subject rdf:resource="rdf:#6da822a7-f1bf-4867-b3df-bbcbb332fc29"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0cf7313e-bf57-41a1-8616-bda1b637665e">
    <vCard:Given>Upinder</vCard:Given>
    <vCard:Family>Bhalla</vCard:Family>
    <vCard:Other>S</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#bhalla_model_1999">
    <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>signal_transduction</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>
    <dc:title>Bhalla and Iyengar's Phopholipase C (beta) Pathway, 1999</dc:title>
    <cmeta:comment rdf:resource="rdf:#55a2793b-eddb-4002-bea3-e777f38e8a9d"/>
    <bqs:reference rdf:resource="rdf:#e95c8564-ee9d-4f77-bfd4-9799e9b00f41"/>
    <bqs:reference rdf:resource="rdf:#ec46a1d0-fde9-4720-9fd4-b21e6949cec2"/>
  </rdf:Description>
  <rdf:Description rdf:about="#PIP2">
    <dcterms:alternative>
          Phosphatidylinositol-4,5-bisphosphate
        </dcterms:alternative>
    <dc:title>PIP2</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#05904991-198d-432e-8aad-a676859a6636">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#75c4b6e3-5bc7-4644-8ec4-c08c70423293"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#49b060ed-78c7-46e6-b876-5c6aa2c53f76">
    <vCard:ORG rdf:resource="rdf:#88b63fa6-2d38-40d4-b22f-fb8b018ca5a5"/>
    <vCard:EMAIL rdf:resource="rdf:#8f533a90-e79e-4e5b-b81e-6577dc9c3682"/>
    <vCard:N rdf:resource="rdf:#37542cf1-6523-483d-81dc-d50d5a96c6c2"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e95c8564-ee9d-4f77-bfd4-9799e9b00f41">
    <bqs:Pubmed_id>9888852</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#9cd9dd55-c99f-49fa-af8a-2eb9abeb1b29"/>
  </rdf:Description>
  <rdf:Description rdf:about="#DAG">
    <dcterms:alternative>diacylglycerol</dcterms:alternative>
    <dc:title>DAG</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8f533a90-e79e-4e5b-b81e-6577dc9c3682">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#542a64f5-b33a-4482-b72f-d726fee40a74">
    <dc:title>Science</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#75c4b6e3-5bc7-4644-8ec4-c08c70423293">
    <vCard:Given>Ravi</vCard:Given>
    <vCard:Family>Iyengar</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9cd9dd55-c99f-49fa-af8a-2eb9abeb1b29">
    <dc:creator rdf:resource="rdf:#d4a1e3e8-bdd2-4778-8711-9c1bd349f333"/>
    <dc:title>
            Emergent Properties of Networks of Biological Signaling Pathways 
          </dc:title>
    <bqs:volume>283</bqs:volume>
    <bqs:first_page>381</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#542a64f5-b33a-4482-b72f-d726fee40a74"/>
    <dcterms:issued rdf:resource="rdf:#6bd45351-2aad-413a-8d7c-817930e6adbc"/>
    <bqs:last_page>387</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="#PLC">
    <dcterms:alternative>phospholipase C</dcterms:alternative>
    <dc:title>PLC</dc:title>
  </rdf:Description>
</rdf:RDF>
</model>