// This CellML file was generated on 20/06/2007 at 12:39:18 at a.m. using:
//
// COR (0.9.31.649)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// title: Complete network of the Bhalla-Iyengar model
// created: W3CDTF 2007-08-27T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; m.mccormick@auckland.ac.nz; Given Matthew; Family McCormick
// modification: W3CDTF 2009-05-27T14:58:25+12:00; updated curation status; Given James; Family Lawson; Other Richard
// reference: subject_type keyword; signal_transduction
// reference: Pubmed_id 9888852; Given Upinder; Family Bhalla; Other S; Given Ravi; Family Iyengar; title Emergent Properties of Networks of Biological Signaling Pathways; volume 283; first_page 381; title Science; W3CDTF 1999-01-15; last_page 387
def model bi_model_1999_version01 as
  // Emergent properties of networks of biological signaling pathways
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This version of the model describes the complete network of signalling pathways in the original publication. This model is able to be solved but does not give the correct results as it is not connected to the other modules of the pathway. ValidateCellML verifies this model as valid CellML but detects unit inconsistencies.
  //
  // Model Structure
  //
  // ABSTRACT: Many distinct signaling pathways allow the cell to receive, process, and respond to information. Often, components of different pathways interact, resulting in signaling networks. Biochemical signaling networks were constructed with experimentally obtained constants and analyzed by computational methods to understand their role in complex biological processes. These networks exhibit emergent properties such as integration of signals across multiple time scales, generation of distinct outputs depending on input strength and duration, and self-sustaining feedback loops. Feedback can result in bistable behavior with discrete steady-state activities, well-defined input thresholds for transition between states and prolonged signal output, and signal modulation in response to transient stimuli. These properties of signaling networks raise the possibility that information for "learned behavior" of biological systems may be stored within intracellular biochemical reactions that comprise signaling pathways.
  //
  // The original paper reference is cited below:
  //
  // Emergent properties of networks of biological signaling pathways. Bhalla US, Iyengar R. Science 1999 Jan 15; 283(5400); 381-7. PubMed ID: 9888852 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=9888852&dopt=Abstract)
  //
  // model diagram
  //
  // A rendering of the complete signalling network.
  def unit s as
    unit second;
  enddef;
  def unit um as
    unit litre {expo: -1};
    unit mole {pref: micro};
  enddef;
  def unit um_per_s as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_um_s as
    unit mole {pref: micro, expo: -1};
    unit litre {expo: -1};
  enddef;
  def unit per_um2_s as
    unit mole {pref: micro, expo: -2};
    unit litre {expo: -1};
  enddef;
  def unit per_s as
    unit s {expo: -1};
  enddef;

  def comp environment as
    var t: s {pub: out};
  enddef;

  def comp Calcium as
    var Ca: um {pub: out, init: 1};
  enddef;

  def comp undefinedvariables as
    var GTP: um {pub: out, init: 0.5};
    var PKA: um {pub: out, init: 0.1};
  enddef;

  def comp DGBM_Model_Modules as
    var t: s {pub: in};
    var PKA: um {pub: in};
    var Ca: um {pub: in};
    var GTP: um {pub: in};
    var PKC: um {pub: in};
    var GAP: um {pub: in};
    var Raf: um {pub: in};
    var GEF_star: um {pub: out, init: 0};
    var CaM_GEF: um {pub: out, init: 0};
    var Gbg_GEF: um {pub: out, init: 0};
    var CaGqPLC: um {pub: out, init: 0};
    var CaPLC: um {pub: out, init: 0};
    var NgCaM: um {pub: out, init: 0};
    var GEF: um {pub: out, init: 0};
    var Ng: um {pub: out, init: 10};
    var Gbg: um {init: 0.1};
    var Ga_GDP: um {init: 1};
    var mGluR: um {init: 0.3};
    var PLC: um {init: 0.8};
    var Ca2CaM: um {init: 0};
    var Ca3CaM: um {init: 0};
    var Ng_star: um {init: 0};
    var Gabg: um {init: 0};
    var R: um {init: 0};
    var Gabg_R: um {init: 0};
    var Glu_synapse: um {init: 0};
    var Gabg_GluR: um {init: 0};
    var Glu: um {init: 0};
    var Ga_GTP: um {init: 0};
    var GqPLC: um {init: 0};
    var GEF_inact: um {init: 0.1};
    var Ca4CAM: um {init: 0};
    var CaM: um {init: 20};
    var one: dimensionless {init: 1};
    var kfD1: per_s {init: 500};
    var kbD1: per_s {init: 1000};
    var kfD2: per_s {init: 0.000028};
    var kbD2: per_um_s {init: 0.1};
    var kfD3: per_s {init: 0.000028};
    var kbD3: per_um_s {init: 10};
    var kfD4: per_um_s {init: 0.000001};
    var kbD4: per_s {init: 1};
    var kfD5: per_s {init: 0.00000001};
    var kbD5: per_um_s {init: 0.0001};
    var kfD6: per_s {init: 0.01};
    var kfD7: per_s {init: 0.0133};
    var kfD8: per_um_s {init: 0.00001};
    var kfD9: per_um_s {init: 0.0001};
    var kfG1: per_um_s {init: 0.000005};
    var kbG1: per_s {init: 1};
    var kfG2: per_um_s {init: 0.0000042};
    var kbG2: per_s {init: 1};
    var kfG3: per_um_s {init: 0.00005};
    var kbG3: per_s {init: 1};
    var kfG4: per_um_s {init: 0.0000042};
    var kbG4: per_s {init: 1};
    var kfG5: per_s {init: 0.0133};
    var kfB2: per_s {init: 1};
    var kbB2: per_s {init: 0};
    var kmB3: um {init: 3.333333333333};
    var kfB5: per_um_s {init: 0.0001};
    var kbB5: per_s {init: 1};
    var kfB7: per_s {init: 1};
    var kbB7: per_s {init: 0};
    var kfB8: per_um_s {init: 0.00001};
    var kbB8: per_s {init: 1};
    var kmB1: um {init: 7.5};
    var VmaxB1: per_s {init: 9};
    var kmB6: um {init: 3.33333333333};
    var VmaxB6: per_s {init: 4};
    var kfM1: per_um2_s {init: 0.0000000002};
    var kbM1: per_s {init: 72};
    var kfM2: per_um_s {init: 0.000006};
    var kbM2: per_s {init: 10};
    var kfM3: per_um_s {init: 0.000000775};
    var kbM3: per_s {init: 10};
    var kfM4: per_um_s {init: 0.0000005};
    var kbM4: per_s {init: 1};
    var kfM6: per_s {init: 0.005};
    var kmM5: um {init: 10.012};
    var VmaxM5: um_per_s {init: 0.67};
    var kmM7: um {init: 28.626667};
    var VmaxM7: per_s {init: 0.58};
    var kmM8: um {init: 28.595};
    var VmaxM8: per_s {init: 0.35};
    var kmH1: um {init: 66.666666667};
    ode(Ga_GDP, t) = Ga_GTP*kfD7-Ga_GDP*kfD8*Gbg+CaGqPLC*kfG5;
    ode(mGluR, t) = kfD5*Gabg_GluR-kbD5*Gabg*mGluR-(kfD3*mGluR-kbD3*Glu*R)+kfD6*Gabg_GluR;
    ode(Gabg, t) = Ga_GDP*Gbg*kfD8-(Gabg*R*kfD4-Gabg_R*kbD4)+kfD5*Gabg_GluR-kbD5*Gabg*mGluR-kfD9*Gabg*GTP;
    ode(R, t) = kfD3*mGluR-kbD3*Glu*R-(Gabg*R*kfD4-Gabg_R*kbD4);
    ode(Gbg, t) = -Ga_GDP*Gbg*kfD8+kfD6*Gabg_GluR+kfD9*Gabg*GTP-(kfB8*GEF*Gbg-kbB8*Gbg_GEF);
    ode(Gabg_R, t) = Gabg*R*kfD4-Gabg_R*kbD4+kfD2*Gabg_GluR-Gabg_R*Glu*kbD2;
    ode(Glu_synapse, t) = -(kfD1*Glu_synapse-kbD1*Glu);
    ode(Gabg_GluR, t) = -(kfD2*Gabg_GluR-Gabg_R*Glu*kbD2)-(kfD5*Gabg_GluR-kbD5*Gabg*mGluR)-kfD6*Gabg_GluR;
    ode(Glu, t) = kfD1*Glu_synapse-kbD1*Glu+kfD2*Gabg_GluR-Gabg_R*Glu*kbD2+kfD3*mGluR-kbD3*Glu*R;
    ode(Ga_GTP, t) = kfD9*Gabg*GTP-Ga_GTP*kfD7-(PLC*Ga_GTP*kfG2-GqPLC*kbG2)-(CaGqPLC*kbG4+CaPLC*Ga_GTP*kfG4);
    ode(PLC, t) = -(PLC*Ca*kfG1-CaPLC*kbG1)-(PLC*Ga_GTP*kfG2-GqPLC*kbG2);
    ode(GqPLC, t) = PLC*Ga_GTP*kfG2-GqPLC*kbG2-(Ca*GqPLC*kfG3-CaGqPLC*kbG3);
    ode(CaPLC, t) = PLC*Ca*kfG1-CaPLC*kbG1+CaGqPLC*kfG5-(-CaGqPLC*kbG4+CaPLC*Ga_GTP*kfG4);
    ode(CaGqPLC, t) = GqPLC*Ca*kfG3-CaGqPLC*kbG3+CaPLC*Ga_GTP*kfG4-CaGqPLC*kbG4-CaGqPLC*kfG5;
    ode(GEF_inact, t) = PKA*VmaxB1*GEF/(kmB1+GEF)-kfB2*GEF_inact;
    ode(GEF, t) = -(PKA*VmaxB1*GEF/(kmB1+GEF)+PKC*VmaxB6*GEF/(kmB6*(one+GAP/kmB3+Ng/kmM7+Raf/kmH1+NgCaM/kmM8)+GEF)-kfB2*GEF_inact-kfB7*GEF_star)-kfB5*Ca4CAM*GEF+kbB5*CaM_GEF-kfB8*GEF*Gbg+kbB8*Gbg_GEF;
    ode(CaM_GEF, t) = -kbB5*CaM_GEF+kfB5*GEF*Ca4CAM;
    ode(Ca4CAM, t) = -(-kbB5*CaM_GEF+kfB5*GEF*Ca4CAM)+Ca*Ca3CaM*kfM3-kbM3*Ca4CAM;
    ode(Gbg_GEF, t) = -(-kfB8*GEF*Gbg+kbB8*Gbg_GEF);
    ode(GEF_star, t) = PKC*VmaxB6*GEF/(kmB6*(one+GAP/kmB3+Ng/kmM7+Raf/kmH1+NgCaM/kmM8)+GEF)-kfB7*GEF_star;
    ode(CaM, t) = -(kfM1*Ca*Ca*CaM-kbM1*Ca2CaM)-(kfM4*Ng*CaM-kbM4*NgCaM)+NgCaM*PKC*VmaxM8/(NgCaM+kmM8);
    ode(NgCaM, t) = kfM4*Ng*CaM-kbM4*NgCaM-NgCaM*PKC*VmaxM8/(NgCaM+kmM8*(one+GAP/kmB3+GEF/kmB6+Raf/kmH1+Ng/kmM7));
    ode(Ca2CaM, t) = kfM1*Ca*Ca*CaM-kbM1*Ca2CaM-(Ca*Ca2CaM*kfM2-kbM2*Ca3CaM);
    ode(Ca3CaM, t) = Ca*Ca2CaM*kfM2-kbM2*Ca3CaM-(Ca*Ca3CaM*kfM3-kbM3*Ca4CAM);
    ode(Ng_star, t) = NgCaM*PKC*VmaxM8/(NgCaM+kmM8*(one+GAP/kmB3+GEF/kmB6+Raf/kmH1+Ng/kmM7))-kfM6*Ng_star-VmaxM5*Ng_star/(Ng_star+kmM5)+Ng*PKC*VmaxM7/(Ng+kmM7*(one+GAP/kmB3+GEF/kmB6+Raf/kmH1+NgCaM/kmM8));
    ode(Ng, t) = kfM6*Ng_star+VmaxM5*Ng_star/(Ng_star+kmM5)-Ng*PKC*VmaxM7/(Ng+kmM7*(one+GAP/kmB3+GEF/kmB6+Raf/kmH1+NgCaM/kmM8));
  enddef;

  def comp B_Model_Modules as
    var t: s {pub: in};
    var GEF_star: um {pub: in};
    var Gbg_GEF: um {pub: in};
    var CaM_GEF: um {pub: in};
    var PKC: um {pub: in};
    var SHCstar_SOS_GRB2: um {pub: in};
    var MAPK_star: um {pub: in};
    var NgCaM: um {pub: in};
    var GEF: um {pub: in};
    var Ng: um {pub: in};
    var SOS: um {pub: in};
    var MAPKK_star_star: um {pub: in};
    var MAPKK_star: um {pub: in};
    var Raf_star: um {pub: out, init: 0};
    var GAP: um {pub: out, init: 0.002};
    var Raf: um {pub: out, init: 0.2};
    var GTPRasRaf_star: um {pub: out, init: 0};
    var Raf_star_star: um {pub: out, init: 0};
    var GTP_RAS: um {init: 0};
    var GDP_RAS: um {init: 0.2};
    var GAPstar: um {init: 0};
    var PP2A: um {init: 0.224};
    var one: dimensionless {init: 1};
    var kfB12: per_s {init: 0.0001};
    var kbB12: per_s {init: 0};
    var kmB9: um {init: 0.50505};
    var VmaxB9: per_s {init: 0.02};
    var kmB10: um {init: 0.50505};
    var VmaxB10: per_s {init: 0.02};
    var kmB11: um {init: 0.50505};
    var VmaxB11: per_s {init: 0.02};
    var kmB13: um {init: 1.0104};
    var VmaxB13: per_s {init: 10};
    var kfB4: per_s {init: 0.1};
    var kbB4: per_s {init: 0};
    var kmB3: um {init: 3.33333333333};
    var VmaxB3: per_s {init: 4};
    var kmA7: um {init: 0.50505};
    var VmaxA7: per_s {init: 0.02};
    var kfH5: per_um_s {init: 0.00004};
    var kbH5: per_s {init: 0.5};
    var kmH1: um {init: 66.666666667};
    var kmH2: um {init: 25.64166667};
    var kmH3: um {init: 15.6565};
    var kmH4: um {init: 15.6565};
    var VmaxH1: per_s {init: 4};
    var VmaxH2: per_s {init: 10};
    var VmaxH3: per_s {init: 6};
    var VmaxH4: per_s {init: 6};
    var kmM8: um {init: 28.595};
    var kmB6: um {init: 3.33333333333};
    var kmM7: um {init: 28.626667};
    var kmA9: um {init: 2.564166667};
    var kmH8: um {init: 15.6565};
    var kmH9: um {init: 15.6565};
    ode(GTP_RAS, t) = -GAP*VmaxB13*GTP_RAS/(kmB13+GTP_RAS)-kfB12*GTP_RAS+GEF_star*VmaxB10*GDP_RAS/(kmB10+GDP_RAS)+Gbg_GEF*VmaxB11*GDP_RAS/(kmB11+GDP_RAS)+CaM_GEF*VmaxB9*GDP_RAS/(kmB9+GDP_RAS)+SHCstar_SOS_GRB2*VmaxA7*GDP_RAS/(kmA7+GDP_RAS)-GTP_RAS*Raf_star*kfH5+GTPRasRaf_star*kbH5;
    ode(GDP_RAS, t) = -(-GAP*VmaxB13*GTP_RAS/(kmB13+GTP_RAS)-kfB12*GTP_RAS+GEF_star*VmaxB10*GDP_RAS/(kmB10+GDP_RAS)+Gbg_GEF*VmaxB11*GDP_RAS/(kmB11+GDP_RAS)+CaM_GEF*VmaxB9*GDP_RAS/(kmB9+GDP_RAS))-SHCstar_SOS_GRB2*VmaxA7*GDP_RAS/(kmA7+GDP_RAS);
    ode(GAP, t) = -PKC*VmaxB3*GAP/(kmB3*(one+Raf/kmH1+GEF/kmB6+Ng/kmM7+NgCaM/kmM8)+GAP)+kfB4*GAPstar;
    ode(GAPstar, t) = PKC*VmaxB3*GAP/(kmB3*(one+Raf/kmH1+GEF/kmB6+Ng/kmM7+NgCaM/kmM8)+GAP)-kfB4*GAPstar;
    ode(GTPRasRaf_star, t) = GTP_RAS*Raf_star*kfH5-GTPRasRaf_star*kbH5;
    ode(Raf, t) = -PKC*Raf*VmaxH1/(kmH1*(one+GAP/kmB3+GEF/kmB6+Ng/kmM7+NgCaM/kmM8)+Raf)+Raf_star*PP2A*VmaxH3/(kmH3*(one+Raf_star_star/kmH4+MAPKK_star_star/kmH9+MAPKK_star/kmH8)+Raf_star);
    ode(Raf_star, t) = PKC*Raf*VmaxH1/(kmH1*(one+GAP/kmB3+GEF/kmB6+Ng/kmM7+NgCaM/kmM8)+Raf)-Raf_star*PP2A*VmaxH3/(kmH3*(one+Raf_star_star/kmH4+MAPKK_star_star/kmH9+MAPKK_star/kmH8)+Raf_star)-Raf_star*MAPK_star*VmaxH2/(kmH2*(one+SOS/kmA9)+Raf_star)+Raf_star_star*PP2A*VmaxH4/(kmH4*(one+Raf_star/kmH3+MAPKK_star_star/kmH9+MAPKK_star/kmH8)+Raf_star_star);
    ode(Raf_star_star, t) = Raf_star*MAPK_star*VmaxH2/(kmH2*(one+SOS/kmA9)+Raf_star)-Raf_star_star*PP2A*VmaxH4/(kmH4*(one+Raf_star/kmH3+MAPKK_star_star/kmH9+MAPKK_star/kmH8)+Raf_star_star);
  enddef;

  def comp H_Model_Module_MAPKK as
    var t: s {pub: in};
    var GTPRasRaf_star: um {pub: in};
    var Raf_star: um {pub: in};
    var Raf_star_star: um {pub: in};
    var MAPKK_star: um {pub: out, init: 0};
    var MAPKK_star_star: um {pub: out, init: 0};
    var MAPKK: um {init: 0.18};
    var PP2A: um {init: 0.224};
    var one: dimensionless {init: 1};
    var kmH6: um {init: 0.159091667};
    var kmH7: um {init: 0.159091667};
    var kmH8: um {init: 15.6565};
    var kmH9: um {init: 15.6565};
    var VmaxH6: per_s {init: 0.105};
    var VmaxH7: per_s {init: 0.105};
    var VmaxH8: per_s {init: 6};
    var VmaxH9: per_s {init: 6};
    var kmH3: um {init: 15.6565};
    var kmH4: um {init: 15.6565};
    ode(MAPKK, t) = -MAPKK*VmaxH6*GTPRasRaf_star/(kmH6*(one+MAPKK_star/kmH7)+MAPKK)+MAPKK_star*VmaxH8*PP2A/(kmH8*(one+Raf_star/kmH3+Raf_star_star/kmH4+MAPKK_star_star/kmH9)+MAPKK_star);
    ode(MAPKK_star, t) = MAPKK*VmaxH6*GTPRasRaf_star/(kmH6*(one+MAPKK_star/kmH7)+MAPKK)-MAPKK_star*VmaxH8*PP2A/(kmH8*(one+Raf_star/kmH3+Raf_star_star/kmH4+MAPKK_star_star/kmH9)+MAPKK_star)-MAPKK_star*VmaxH7*GTPRasRaf_star/(kmH7*(one+MAPKK/kmH6)+MAPKK_star)+MAPKK_star_star*VmaxH9*PP2A/(kmH9*(one+Raf_star/kmH3+Raf_star_star/kmH4+MAPKK_star/kmH8)+MAPKK_star_star);
    ode(MAPKK_star_star, t) = MAPKK_star*VmaxH7*GTPRasRaf_star/(kmH7*(one+MAPKK/kmH6)+MAPKK_star)-MAPKK_star_star*VmaxH9*PP2A/(kmH9*(one+Raf_star/kmH3+Raf_star_star/kmH4+MAPKK_star/kmH8)+MAPKK_star_star);
  enddef;

  def comp H_Model_Module_MAPK as
    var t: s {pub: in};
    var MAPKK_star_star: um {pub: in};
    var MAPK_star: um {pub: out, init: 0};
    var MAPK: um {pub: out, init: 0.36};
    var MAPK_tyr: um {init: 0};
    var MKP1: um {init: 0.032};
    var one: dimensionless {init: 1};
    var kmH10: um {init: 0.046296667};
    var kmH11: um {init: 0.046296667};
    var kmH12: um {init: 0.066666667};
    var kmH13: um {init: 0.066666667};
    var VmaxH10: per_s {init: 0.15};
    var VmaxH11: per_s {init: 0.15};
    var VmaxH12: per_s {init: 1};
    var VmaxH13: per_s {init: 1};
    ode(MAPK, t) = -MAPK*VmaxH10*MAPKK_star_star/(kmH10*(one+MAPK_tyr/kmH11)+MAPK)+MAPK_tyr*VmaxH12*MKP1/(kmH12*(one+MAPK_star/kmH13)+MAPK_tyr);
    ode(MAPK_tyr, t) = MAPK*VmaxH10*MAPKK_star_star/(kmH10*MAPK_tyr/kmH11+MAPK)-MAPK_tyr*VmaxH12*MKP1/(kmH12*(one+MAPK_star/kmH13)+MAPK_tyr)-MAPK_tyr*VmaxH11*MAPKK_star_star/(kmH11*(one+MAPK_tyr/kmH12)+MAPK_tyr)+MAPK_star*VmaxH13*MKP1/(kmH13*(one+MAPK_tyr/kmH12)+MAPK_star);
    ode(MAPK_star, t) = MAPK_tyr*VmaxH11*MAPKK_star_star/(kmH11*(one+MAPK/kmH10)+MAPK_tyr)-MAPK_star*VmaxH13*MKP1/(kmH13*(one+MAPK_tyr/kmH12)+MAPK_star);
  enddef;

  def comp A_Model_Module_SHC as
    var t: s {pub: in};
    var EGF_EGFR: um {pub: in};
    var MAPK_star: um {pub: in};
    var Raf_star: um {pub: in};
    var CaPLCg: um {pub: in};
    var SOS: um {pub: out, init: 0.1};
    var SHCstar_SOS_GRB2: um {pub: out, init: 0};
    var SHC: um {pub: out, init: 0.5};
    var SHCstar: um {init: 0};
    var SOSstar_GRB2: um {init: 0};
    var SOS_GRB2: um {init: 0};
    var GRB2: um {init: 1};
    var SOSstar: um {init: 0};
    var one: dimensionless {init: 1};
    var kmA3: um {init: 0.83333333333};
    var kfA4: per_s {init: 0.0016667};
    var kbA4: per_s {init: 0};
    var kfA5: per_um_s {init: 0.000000041667};
    var kbA5: per_s {init: 0.0168};
    var kfA6: per_um_s {init: 0.0000008333};
    var kbA6: per_s {init: 0.1};
    var kfA8: per_s {init: 0.001};
    var kbA8: per_s {init: 0};
    var kfA10: per_um_s {init: 0.000000041667};
    var kbA10: per_s {init: 0.0168};
    var kmA7: um {init: 0.40404};
    var kmA9: um {init: 2.564166667};
    var VmaxA7: per_s {init: 0.02};
    var VmaxA3: per_s {init: 0.2};
    var VmaxA9: per_s {init: 10};
    var kmH2: um {init: 25.64166667};
    var kmF4: um {init: 0.33333333333};
    ode(SHCstar, t) = EGF_EGFR*VmaxA3*SHC/(kmA3*(one+CaPLCg/kmF4)+SHC)-kfA6*SHCstar*SOS_GRB2+kbA6*SHCstar_SOS_GRB2-kfA4*SHCstar;
    ode(SHC, t) = kfA4*SHCstar-kbA4*SHC-EGF_EGFR*VmaxA3*SHC/(kmA3*(one+CaPLCg/kmF4)+SHC);
    ode(SHCstar_SOS_GRB2, t) = kfA6*SHCstar*SOS_GRB2-kbA6*SHCstar_SOS_GRB2;
    ode(SOS_GRB2, t) = -kfA6*SHCstar*SOS_GRB2+kbA6*SHCstar_SOS_GRB2-kbA5*SOS_GRB2+kfA5*SOS*GRB2;
    ode(SOS, t) = kfA8*SOSstar-kbA8*SOS-MAPK_star*VmaxA9*SOS/(kmA9*(one+Raf_star/kmH2)+SOS)+kbA5*SOS_GRB2-kfA5*SOS*GRB2;
    ode(SOSstar, t) = -kfA8*SOSstar+kbA8*SOS+MAPK_star*VmaxA9*SOS/(kmA9*(one+Raf_star/kmH2)+SOS)-kfA10*SOSstar*GRB2+kbA10*SOSstar_GRB2;
    ode(SOSstar_GRB2, t) = kfA10*SOSstar*GRB2-kbA10*SOSstar_GRB2;
    ode(GRB2, t) = kbA5*SOS_GRB2-kfA5*SOS*GRB2-kfA10*SOSstar*GRB2+kbA10*SOSstar_GRB2;
  enddef;

  def comp A_Model_Module_EGFR as
    var t: s {pub: in};
    var EGF_EGFR: um {pub: out, init: 0};
    var EGF_EGFR_INTERNAL: um {init: 0};
    var EGF: um {init: 166.67};
    var EGFR: um {init: 0.16667};
    var kfA1: per_um_s {init: 0.000007};
    var kbA1: per_s {init: 0.25};
    var kfA2: per_s {init: 0.002};
    var kbA2: per_s {init: 0.00033};
    ode(EGF, t) = -kfA1*EGF*EGFR+kbA1*EGF_EGFR;
    ode(EGFR, t) = -kfA1*EGF*EGFR+kbA1*EGF_EGFR;
    ode(EGF_EGFR, t) = kfA1*EGF*EGFR-kbA1*EGF_EGFR-kfA2*EGF_EGFR+kbA2*EGF_EGFR_INTERNAL;
    ode(EGF_EGFR_INTERNAL, t) = kfA2*EGF_EGFR-kbA2*EGF_EGFR_INTERNAL;
  enddef;

  def comp F_Model_Module_PLC as
    var t: s {pub: in};
    var EGF_EGFR: um {pub: in};
    var Ca: um {pub: in};
    var SHC: um {pub: in};
    var CaPLCg: um {pub: out, init: 0};
    var CaPLCg_star: um {pub: out, init: 0};
    var PLCg: um {init: 0.82};
    var PLCg_star: um {init: 0};
    var kfF1: per_um_s {init: 0.0003};
    var kbF1: per_s {init: 10};
    var kfF3: per_s {init: 0.05};
    var kfF5: per_um_s {init: 0.00002};
    var kbF5: per_s {init: 10};
    var kmF4: um {init: 0.33333333333};
    var VmaxF4: per_s {init: 0.2};
    var kmA3: um {init: 0.83333333333};
    var one: dimensionless {init: 1};
    ode(PLCg, t) = -Ca*PLCg*kfF1+CaPLCg*kbF1;
    ode(CaPLCg, t) = -(-Ca*PLCg*kfF1+CaPLCg*kbF1)+kfF3*CaPLCg_star-VmaxF4*EGF_EGFR*CaPLCg/(kmF4*(one+SHC/kmA3)+CaPLCg);
    ode(CaPLCg_star, t) = -(kfF3*CaPLCg_star-VmaxF4*EGF_EGFR*CaPLCg/(kmF4+CaPLCg))+Ca*PLCg_star*kfF5-kbF5*CaPLCg_star;
    ode(PLCg_star, t) = -Ca*PLCg_star*kfF5+kbF5*CaPLCg_star;
  enddef;

  def comp KEL_DAGIP3_Model_Modules as
    var t: s {pub: in};
    var Ca: um {pub: in};
    var MAPK: um {pub: in};
    var CaPLCg: um {pub: in};
    var CaPLCg_star: um {pub: in};
    var CaPLC: um {pub: in};
    var CaGqPLC: um {pub: in};
    var PKC: um {pub: out, init: 0};
    var PKC_i: um {init: 1};
    var DAGPKC: um {init: 0};
    var AADAGPKC: um {init: 0};
    var DAGCaPKC: um {init: 0};
    var CaPKC: um {init: 0};
    var AA: um {init: 0};
    var APC: um {init: 30};
    var PIP2_star: um {init: 2.5};
    var PLA2_cyt: um {init: 0.4};
    var PLA2_star: um {init: 0};
    var CaPLA2: um {init: 0};
    var PIP2CaPLA2: um {init: 0};
    var PIP2PLA2: um {init: 0};
    var DAGCaPLA2: um {init: 0};
    var CaPLA2_star: um {init: 0};
    var PIP2: um {init: 10};
    var DAG: um {init: 0};
    var IP3: um {init: 0};
    var Inositol: um {init: 0};
    var PC: um {init: 0};
    var kfK1: per_s {init: 1};
    var kbK1: per_s {init: 50};
    var kfK2: per_um_s {init: 0.0000000002};
    var kbK2: per_s {init: 0.1};
    var kfK3: per_s {init: 1.2705};
    var kbK3: per_s {init: 3.5026};
    var kfK4: per_um_s {init: 0.000000002};
    var kbK4: per_s {init: 0.1};
    var kfK5: per_s {init: 1};
    var kbK5: per_s {init: 0.1};
    var kfK6: per_s {init: 2};
    var kbK6: per_s {init: 0.2};
    var kfK7: per_um_s {init: 0.000001};
    var kbK7: per_s {init: 0.5};
    var kfK8: per_um_s {init: 0.000000013333};
    var kbK8: per_s {init: 8.6348};
    var kfK9: per_um_s {init: 0.000000001};
    var kbK9: per_s {init: 0.1};
    var kfK10: per_um_s {init: 0.00000003};
    var kbK10: per_s {init: 2};
    var kfE1: per_um_s {init: 0.000000002};
    var kbE1: per_s {init: 0.5};
    var kfE3: per_um_s {init: 0.00000016667};
    var kbE3: per_s {init: 0.1};
    var kfE5: per_um_s {init: 0.00000002};
    var kbE5: per_s {init: 0.1};
    var kfE7: per_um_s {init: 0.000000005};
    var kbE7: per_s {init: 4};
    var kfE10: per_s {init: 0.17};
    var kbE10: per_s {init: 0};
    var kfE11: per_um_s {init: 0.00001};
    var kbE11: per_s {init: 0.1};
    var kmE9: um {init: 25.64166667};
    var VmaxE9: per_s {init: 20};
    var kfE13: per_s {init: 0.4};
    var kbE13: per_s {init: 0};
    var kmE2: um {init: 20};
    var kmE4: um {init: 20};
    var kmE6: um {init: 20};
    var kmE8: um {init: 20};
    var kmE12: um {init: 20};
    var VmaxE2: per_s {init: 11.04};
    var VmaxE4: per_s {init: 5.4};
    var VmaxE6: per_s {init: 36};
    var VmaxE8: per_s {init: 60};
    var VmaxE12: per_s {init: 120};
    var kmF2: um {init: 97};
    var kmF6: um {init: 19.79166667};
    var VmaxF2: per_s {init: 14};
    var VmaxF6: per_s {init: 57};
    var kfG8: per_s {init: 0.15};
    var kfG9: per_s {init: 2.5};
    var kmG6: um {init: 5};
    var VmaxG6: per_s {init: 48};
    var kmG7: um {init: 19.84166667};
    var VmaxG7: per_s {init: 10};
    ode(PKC_i, t) = -PKC_i*kfK1+PKC*kbK1-PKC_i*AA*kfK2+PKC*kbK2-PKC_i*DAG*kfK9+DAGPKC*kbK9-PKC_i*Ca*kfK7+CaPKC*kbK7;
    ode(DAGPKC, t) = PKC_i*DAG*kfK9-DAGPKC*kbK9-DAGPKC*AA*kfK10+AADAGPKC*kbK10;
    ode(AADAGPKC, t) = DAGPKC*AA*kfK10-AADAGPKC*kbK10-AADAGPKC*kfK6+PKC*kbK6;
    ode(CaPKC, t) = PKC_i*Ca*kfK7-CaPKC*kbK7-CaPKC*kfK3+PKC*kbK3-CaPKC*AA*kfK4+PKC*kbK4-DAG*CaPKC*kfK8+DAGCaPKC*kbK8;
    ode(DAGCaPKC, t) = DAG*CaPKC*kfK8-DAGCaPKC*kbK8-DAGCaPKC*kfK5+PKC*kbK5;
    ode(PKC, t) = PKC_i*kfK1-PKC*kbK1+PKC_i*AA*kfK2-PKC*kbK2+CaPKC*kfK3-PKC*kbK3+CaPKC*AA*kfK4-PKC*kbK4+DAGCaPKC*kfK5-PKC*kbK5+AADAGPKC*kfK6-PKC*kbK6;
    ode(AA, t) = -PKC_i*AA*kfK2+PKC*kbK2-CaPKC*AA*kfK4+PKC*kbK4-DAGPKC*AA*kfK10+AADAGPKC*kbK10-AA*kfE13+CaPLA2_star*VmaxE12*APC/(kmE12+APC)+CaPLA2*VmaxE4*APC/(kmE4+APC)+DAGCaPLA2*VmaxE8*APC/(kmE8+APC)+PIP2CaPLA2*VmaxE6*APC/(kmE6+APC)+PIP2PLA2*VmaxE2*APC/(kmE2+APC);
    ode(PLA2_cyt, t) = PLA2_star*kfE10-PIP2_star*PLA2_cyt*kfE1+PIP2PLA2*kbE1-Ca*PLA2_cyt*kfE3+CaPLA2*kbE3-MAPK*VmaxE9*PLA2_cyt/(kmE9+PLA2_cyt);
    ode(PIP2PLA2, t) = PIP2_star*PLA2_cyt*kfE1-PIP2PLA2*kbE1;
    ode(PIP2_star, t) = -PIP2_star*PLA2_cyt*kfE1+PIP2PLA2*kbE1-PIP2_star*CaPLA2*kfE5+PIP2CaPLA2*kbE5;
    ode(PLA2_star, t) = -PLA2_star*kfE10+MAPK*VmaxE9*PLA2_cyt/(kmE9+PLA2_cyt)-Ca*PLA2_star*kfE11+CaPLA2_star*kbE11;
    ode(CaPLA2_star, t) = Ca*PLA2_star*kfE11-CaPLA2_star*kbE11;
    ode(CaPLA2, t) = Ca*PLA2_cyt*kfE3-CaPLA2*kbE3-DAG*CaPLA2*kfE7+DAGCaPLA2*kbE7-PIP2_star*CaPLA2*kfE5+PIP2CaPLA2*kbE5;
    ode(PIP2CaPLA2, t) = PIP2_star*CaPLA2*kfE5-PIP2CaPLA2*kbE5;
    ode(DAGCaPLA2, t) = DAG*CaPLA2*kfE7-DAGCaPLA2*kbE7;
    ode(APC, t) = AA*kfE13-(CaPLA2_star*VmaxE12*APC/(kmE12+APC)+CaPLA2*VmaxE4*APC/(kmE4+APC)+DAGCaPLA2*VmaxE8*APC/(kmE8+APC)+PIP2CaPLA2*VmaxE6*APC/(kmE6+APC)+PIP2PLA2*VmaxE2*APC/(kmE2+APC));
    ode(PIP2, t) = -CaPLCg*VmaxF2*PIP2/(kmF2+PIP2)-CaPLCg_star*VmaxF6*PIP2/(kmF6+PIP2)-CaPLC*VmaxG7*PIP2/(kmG7+PIP2)-CaGqPLC*VmaxG6*PIP2/(kmG6+PIP2);
    ode(DAG, t) = CaPLCg*VmaxF2*PIP2/(kmF2+PIP2)+CaPLCg_star*VmaxF6*PIP2/(kmF6+PIP2)+CaPLC*VmaxG7*PIP2/(kmG7+PIP2)-kfG8*DAG+CaGqPLC*VmaxG6*PIP2/(kmG6+PIP2)-PKC_i*DAG*kfK9+DAGPKC*kbK9-DAG*CaPKC*kfK8+DAGCaPKC*kbK8-DAG*CaPLA2*kfE7+DAGCaPLA2*kbE7;
    ode(IP3, t) = CaPLCg*VmaxF2*PIP2/(kmF2+PIP2)+CaPLCg_star*VmaxF6*PIP2/(kmF6+PIP2)+CaGqPLC*VmaxG6*PIP2/(kmG6+PIP2)-kfG9*IP3+CaPLC*VmaxG7*PIP2/(kmG7+PIP2);
    ode(PC, t) = kfG8*DAG;
    ode(Inositol, t) = kfG9*IP3;
  enddef;
  def map between DGBM_Model_Modules and environment for
    vars t and t;
  enddef;
  def map between KEL_DAGIP3_Model_Modules and environment for
    vars t and t;
  enddef;
  def map between F_Model_Module_PLC and environment for
    vars t and t;
  enddef;
  def map between B_Model_Modules and environment for
    vars t and t;
  enddef;
  def map between H_Model_Module_MAPK and environment for
    vars t and t;
  enddef;
  def map between H_Model_Module_MAPKK and environment for
    vars t and t;
  enddef;
  def map between A_Model_Module_EGFR and environment for
    vars t and t;
  enddef;
  def map between A_Model_Module_SHC and environment for
    vars t and t;
  enddef;
  def map between DGBM_Model_Modules and Calcium for
    vars Ca and Ca;
  enddef;
  def map between KEL_DAGIP3_Model_Modules and Calcium for
    vars Ca and Ca;
  enddef;
  def map between F_Model_Module_PLC and Calcium for
    vars Ca and Ca;
  enddef;
  def map between F_Model_Module_PLC and A_Model_Module_EGFR for
    vars EGF_EGFR and EGF_EGFR;
  enddef;
  def map between F_Model_Module_PLC and A_Model_Module_SHC for
    vars CaPLCg and CaPLCg;
    vars SHC and SHC;
  enddef;
  def map between KEL_DAGIP3_Model_Modules and F_Model_Module_PLC for
    vars CaPLCg and CaPLCg;
    vars CaPLCg_star and CaPLCg_star;
  enddef;
  def map between A_Model_Module_SHC and A_Model_Module_EGFR for
    vars EGF_EGFR and EGF_EGFR;
  enddef;
  def map between A_Model_Module_SHC and H_Model_Module_MAPK for
    vars MAPK_star and MAPK_star;
  enddef;
  def map between A_Model_Module_SHC and B_Model_Modules for
    vars SHCstar_SOS_GRB2 and SHCstar_SOS_GRB2;
    vars SOS and SOS;
    vars Raf_star and Raf_star;
  enddef;
  def map between DGBM_Model_Modules and B_Model_Modules for
    vars GEF_star and GEF_star;
    vars Gbg_GEF and Gbg_GEF;
    vars CaM_GEF and CaM_GEF;
    vars NgCaM and NgCaM;
    vars GAP and GAP;
    vars Raf and Raf;
    vars GEF and GEF;
    vars Ng and Ng;
  enddef;
  def map between H_Model_Module_MAPK and B_Model_Modules for
    vars MAPK_star and MAPK_star;
  enddef;
  def map between H_Model_Module_MAPKK and B_Model_Modules for
    vars GTPRasRaf_star and GTPRasRaf_star;
    vars Raf_star and Raf_star;
    vars Raf_star_star and Raf_star_star;
    vars MAPKK_star and MAPKK_star;
    vars MAPKK_star_star and MAPKK_star_star;
  enddef;
  def map between H_Model_Module_MAPKK and H_Model_Module_MAPK for
    vars MAPKK_star_star and MAPKK_star_star;
  enddef;
  def map between KEL_DAGIP3_Model_Modules and B_Model_Modules for
    vars PKC and PKC;
  enddef;
  def map between KEL_DAGIP3_Model_Modules and DGBM_Model_Modules for
    vars CaPLC and CaPLC;
    vars CaGqPLC and CaGqPLC;
    vars PKC and PKC;
  enddef;
  def map between KEL_DAGIP3_Model_Modules and H_Model_Module_MAPK for
    vars MAPK and MAPK;
  enddef;
  def map between DGBM_Model_Modules and undefinedvariables for
    vars GTP and GTP;
    vars PKA and PKA;
  enddef;
enddef;
