<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 20/06/2007 at 12:39:18 at a.m. using:

COR (0.9.31.649)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="bhalla_model_1999" name="bi_model_1999_version01">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Emergent properties of networks of biological signaling pathways</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This version of the CellML model describes the Ca-IP3 component of the Bhalla-Iyengar model. This model is able to be solved but does not give the correct results as it is not connected to the other modules of the pathway. ValidateCellML verifies this model as valid CellML but detects unit inconsistencies.
    </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Many distinct signaling pathways allow the cell to receive, process, and respond to information. Often, components of different pathways interact, resulting in signaling networks. Biochemical signaling networks were constructed with experimentally obtained constants and analyzed by computational methods to understand their role in complex biological processes. These networks exhibit emergent properties such as integration of signals across multiple time scales, generation of distinct outputs depending on input strength and duration, and self-sustaining feedback loops. Feedback can result in bistable behavior with discrete steady-state activities, well-defined input thresholds for transition between states and prolonged signal output, and signal modulation in response to transient stimuli. These properties of signaling networks raise the possibility that information for "learned behavior" of biological systems may be stored within intracellular biochemical reactions that comprise signaling pathways.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Emergent properties of networks of biological signaling pathways. Bhalla US, Iyengar R.
            <emphasis>Science</emphasis> 1999 Jan 15; 283(5400); 381-7.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=9888852&amp;dopt=Abstract">PubMed ID: 9888852</ulink>
</para>


<informalfigure float="0" id="fig_pathway_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="bhalla_iyengar_caip3.png"/>
  </imageobject>
</mediaobject>
<caption>A rendering of the Ca-IP3 component of the Bhalla-Iyengar model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>




   <units name="s">
      <unit units="second"/>
   </units>
   <units name="um">
      <unit units="litre" exponent="-1"/>
      <unit units="mole" prefix="micro"/>
   </units>
   <units name="um_per_s">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="per_s">
      <unit units="s" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="s" public_interface="out" name="t"/>
   </component>
   <component name="CaIP3">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="per_s" name="km1" initial_value="0.2"/>
      <variable units="per_s" name="Vmax1" initial_value="72"/>
      <variable units="per_s" name="kf6" initial_value="25"/>
      <variable units="per_s" name="kf7" initial_value="0.00000001"/>
      <variable units="per_s" name="kb7" initial_value="144"/>
      <variable units="per_s" name="kf8" initial_value="0.000000000012"/>
      <variable units="per_s" name="kb8" initial_value="1"/>
      <variable units="per_s" name="kf9" initial_value="0.00000000000000000001"/>
      <variable units="per_s" name="kb9" initial_value="1"/>
      <variable units="per_s" name="p2" initial_value="0.004"/>
      <variable units="per_s" name="p3" initial_value="8"/>
      <variable units="per_s" name="p4" initial_value="0.005"/>
      <variable units="per_s" name="p5" initial_value="19.2"/>
      <variable units="um" name="Ca" initial_value="0.08"/>
      <variable units="um" name="Ca2Ca_transp" initial_value="0.08"/>
      <variable units="um" name="Ca_stores" initial_value="6.3328"/>
      <variable units="um" name="Stores_Leak" initial_value="0.001"/>
      <variable units="um" name="Ca_transp" initial_value="0.0083838"/>
      <variable units="um" name="IP3R" initial_value="0.016643"/>
      <variable units="um" name="IP3R_star"/>
      <variable units="um" name="IP3"/>
      <variable units="um" name="Ca_pump" initial_value="0.00083333"/>
      <variable units="um" name="Ca_ext" initial_value="4000"/>
      <variable units="um" name="Extracell_Leak" initial_value="0.00083333"/>
      <variable units="um" name="Cap_channel" initial_value="0.00083333"/>
      <variable units="um" name="Cap_channel_star"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Ca_ext</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>Ca_pump</ci>
                        <ci>Vmax1</ci>
                        <ci>Ca</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>km1</ci>
                        <ci>Ca</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>Extracell_Leak</ci>
                     <ci>Ca_ext</ci>
                     <ci>p2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>Cap_channel_star</ci>
                  <ci>p4</ci>
                  <ci>Ca_ext</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Ca</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <apply>
                                 <divide/>
                                 <apply>
                                    <times/>
                                    <ci>Ca_pump</ci>
                                    <ci>Vmax1</ci>
                                    <ci>Ca</ci>
                                 </apply>
                                 <apply>
                                    <plus/>
                                    <ci>km1</ci>
                                    <ci>Ca</ci>
                                 </apply>
                              </apply>
                              <apply>
                                 <times/>
                                 <ci>Extracell_Leak</ci>
                                 <ci>Ca_ext</ci>
                                 <ci>p2</ci>
                              </apply>
                           </apply>
                           <apply>
                              <times/>
                              <ci>Cap_channel_star</ci>
                              <ci>p4</ci>
                              <ci>Ca_ext</ci>
                           </apply>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>Stores_Leak</ci>
                        <ci>Ca_stores</ci>
                        <ci>p3</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>IP3R_star</ci>
                        <ci>Ca_stores</ci>
                        <ci>p4</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>Ca</ci>
                     <ci>Ca</ci>
                     <ci>Ca_transp</ci>
                     <ci>kf7</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>Ca2Ca_transp</ci>
                  <ci>kb7</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Cap_channel</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>Ca_stores</ci>
                  <ci>Cap_channel_star</ci>
                  <ci>kf8</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>Cap_channel</ci>
                  <ci>kb8</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Cap_channel_star</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>Ca_stores</ci>
                     </apply>
                     <ci>Cap_channel_star</ci>
                     <ci>kf8</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>Cap_channel</ci>
                     <ci>kb8</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>Cap_channel_star</ci>
                  <ci>p4</ci>
                  <ci>Ca_ext</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>IP3R</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>IP3R_star</ci>
                  <ci>kb9</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>IP3</ci>
                  <ci>IP3</ci>
                  <ci>IP3</ci>
                  <ci>IP3R</ci>
                  <ci>kf9</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>IP3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>IP3R_star</ci>
                  <ci>kb9</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>IP3</ci>
                  <ci>IP3</ci>
                  <ci>IP3</ci>
                  <ci>IP3R</ci>
                  <ci>kf9</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>IP3R_star</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>IP3R_star</ci>
                     </apply>
                     <ci>kb9</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>IP3</ci>
                     <ci>IP3</ci>
                     <ci>IP3</ci>
                     <ci>IP3R</ci>
                     <ci>kf9</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>IP3R_star</ci>
                  <ci>Ca_stores</ci>
                  <ci>p5</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Ca_stores</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <ci>Stores_Leak</ci>
                        </apply>
                        <ci>Ca_stores</ci>
                        <ci>p3</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>IP3R_star</ci>
                        <ci>Ca_stores</ci>
                        <ci>p4</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>Ca_stores</ci>
                     <ci>Cap_channel_star</ci>
                     <ci>kf8</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>Cap_channel</ci>
                  <ci>kb8</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>Ca2Ca_transp</ci>
                  <ci>kf6</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Ca_transp</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>Ca</ci>
                  </apply>
                  <ci>Ca</ci>
                  <ci>Ca_transp</ci>
                  <ci>kf7</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>Ca2Ca_transp</ci>
                  <ci>kb7</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>Ca2Ca_transp</ci>
                  <ci>kf6</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Ca2Ca_transp</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>Ca</ci>
                     <ci>Ca</ci>
                     <ci>Ca_transp</ci>
                     <ci>kf7</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>Ca2Ca_transp</ci>
                     <ci>kb7</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>Ca2Ca_transp</ci>
                  <ci>kf6</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_2="environment" component_1="CaIP3"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>

<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#93197fd3-9375-420d-957a-454674850458">
    <rdf:li rdf:resource="rdf:#82174232-6afa-48cc-a925-92067427841e"/>
    <rdf:li rdf:resource="rdf:#bc677f70-50be-4779-a295-8ab3ecff354e"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
    <dc:title>Ca-IP3 component of the Bhalla-Iyengar model</dc:title>
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#09eb63a5-16c4-4f65-825b-857d5611d090"/>
    <dcterms:created rdf:resource="rdf:#a755af9b-eda6-41ba-a4f9-31ee9eff4bb7"/>
    <dc:creator rdf:resource="rdf:#b67b94ba-7f4f-4850-bde5-ced80463c997"/>
    <cmeta:modification rdf:resource="rdf:#cd284d8f-caf0-4d44-b303-3af1e93b9cfc"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bf75dc51-844d-4396-a9b5-f247d1c54b04">
    <bqs:Pubmed_id>9888852</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#1d3ad16a-3dff-4d72-94cf-abc58db8d76b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9dbcb5f8-51c7-4659-bf3e-c99efaa1e913">
    <dc:title>Science</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1d3ad16a-3dff-4d72-94cf-abc58db8d76b">
    <dc:creator rdf:resource="rdf:#93197fd3-9375-420d-957a-454674850458"/>
    <dc:title>Emergent Properties of Networks of Biological Signaling Pathways</dc:title>
    <bqs:volume>283</bqs:volume>
    <bqs:first_page>381</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#9dbcb5f8-51c7-4659-bf3e-c99efaa1e913"/>
    <dcterms:issued rdf:resource="rdf:#7fa26fa7-6b05-41e7-bd5f-ca55d1e278f2"/>
    <bqs:last_page>387</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bc677f70-50be-4779-a295-8ab3ecff354e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#dcca25c9-9c90-4171-9480-3d0227a54f62"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#549954dd-43fb-474d-948c-745f479c7c6e">
    <dc:creator rdf:resource="rdf:#3062c449-6958-4ee0-a810-b52fed32b0d5"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#39d21a7e-776a-4ef0-b0d8-c53a0cd298c2">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dcca25c9-9c90-4171-9480-3d0227a54f62">
    <vCard:Given>Ravi</vCard:Given>
    <vCard:Family>Iyengar</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#65c2618c-373e-4803-a71c-7b568a493229">
    <vCard:N rdf:resource="rdf:#01d61229-4c97-4e79-96bd-3e2ff04305a3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#82174232-6afa-48cc-a925-92067427841e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#a9a321de-baff-4a51-990f-35115e5b1edf"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#09eb63a5-16c4-4f65-825b-857d5611d090">
    <dc:creator rdf:resource="rdf:#39d21a7e-776a-4ef0-b0d8-c53a0cd298c2"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3062c449-6958-4ee0-a810-b52fed32b0d5">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#01d61229-4c97-4e79-96bd-3e2ff04305a3">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#67de5908-0e51-4092-a0d0-db378723d629">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>m.mccormick@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#bhalla_model_1999">
    <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>signal_transduction</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>
    <bqs:reference rdf:resource="rdf:#bf75dc51-844d-4396-a9b5-f247d1c54b04"/>
    <cmeta:comment rdf:resource="rdf:#549954dd-43fb-474d-948c-745f479c7c6e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f644a3ed-0444-4d07-965d-3a54f283bba8">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7fa26fa7-6b05-41e7-bd5f-ca55d1e278f2">
    <dcterms:W3CDTF>1999-01-15</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#290b1278-da64-4a0f-ac52-b472ec02df88">
    <dcterms:W3CDTF>2009-05-27T15:01:23+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#812ccfe8-1d84-4d8d-a27f-6d3c1f547e56">
    <vCard:Given>Matthew</vCard:Given>
    <vCard:Family>McCormick</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cd284d8f-caf0-4d44-b303-3af1e93b9cfc">
    <dcterms:modified rdf:resource="rdf:#290b1278-da64-4a0f-ac52-b472ec02df88"/>
    <rdf:value>updated curation status</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#65c2618c-373e-4803-a71c-7b568a493229"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b67b94ba-7f4f-4850-bde5-ced80463c997">
    <vCard:ORG rdf:resource="rdf:#f644a3ed-0444-4d07-965d-3a54f283bba8"/>
    <vCard:EMAIL rdf:resource="rdf:#67de5908-0e51-4092-a0d0-db378723d629"/>
    <vCard:N rdf:resource="rdf:#812ccfe8-1d84-4d8d-a27f-6d3c1f547e56"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a755af9b-eda6-41ba-a4f9-31ee9eff4bb7">
    <dcterms:W3CDTF>2007-08-28T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a9a321de-baff-4a51-990f-35115e5b1edf">
    <vCard:Given>Upinder</vCard:Given>
    <vCard:Family>Bhalla</vCard:Family>
    <vCard:Other>S</vCard:Other>
  </rdf:Description>
</rdf:RDF>
</model>