<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 20/06/2007 at 12:39:18 at a.m. using:

COR (0.9.31.649)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="bhalla_model_1999" name="bi_model_1999_version01">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Emergent properties of networks of biological signaling pathways</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This version of the CellML model describes the EGFR pathway component of the Bhalla-Iyengar model.  This model is able to be solved but does not give the correct results as it is not connected to the other modules of the pathway. ValidateCellML verifies this model as valid CellML but detects unit inconsistencies.
    </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Many distinct signaling pathways allow the cell to receive, process, and respond to information. Often, components of different pathways interact, resulting in signaling networks. Biochemical signaling networks were constructed with experimentally obtained constants and analyzed by computational methods to understand their role in complex biological processes. These networks exhibit emergent properties such as integration of signals across multiple time scales, generation of distinct outputs depending on input strength and duration, and self-sustaining feedback loops. Feedback can result in bistable behavior with discrete steady-state activities, well-defined input thresholds for transition between states and prolonged signal output, and signal modulation in response to transient stimuli. These properties of signaling networks raise the possibility that information for "learned behavior" of biological systems may be stored within intracellular biochemical reactions that comprise signaling pathways.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Emergent properties of networks of biological signaling pathways. Bhalla US, Iyengar R.
            <emphasis>Science</emphasis> 1999 Jan 15; 283(5400); 381-7.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=9888852&amp;dopt=Abstract">PubMed ID: 9888852</ulink>
</para>


<informalfigure float="0" id="fig_pathway_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="bhalla_iyengar_egrf.png"/>
  </imageobject>
</mediaobject>
<caption>A rendering of the EGFR pathway component of the Bhalla-Iyengar model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>



   <units name="s">
      <unit units="second"/>
   </units>
   <units name="um">
      <unit units="litre" exponent="-1"/>
      <unit units="mole" prefix="micro"/>
   </units>
   <units name="um_per_s">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="per_um_s">
      <unit units="mole" prefix="micro" exponent="-1"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="per_s">
      <unit units="s" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="s" public_interface="out" name="t"/>
   </component>
   <component name="EGF_EGFRtoEGFEGFR">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="per_um_s" name="kf1" initial_value="0.000007"/>
      <variable units="per_s" name="kb1" initial_value="0.25"/>
      <variable units="per_s" name="kf2" initial_value="0.002"/>
      <variable units="per_s" name="kb2" initial_value="0.00033"/>
      <variable units="um" public_interface="out" name="EGF" initial_value="0.16667"/>
      <variable units="um" public_interface="out" name="EGFR" initial_value="0.16667"/>
      <variable units="um" public_interface="out" name="EGF_EGFR" initial_value="0"/>
      <variable units="um" public_interface="out" name="EGF_EGFR_INTERNAL" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>EGF</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>kf1</ci>
                  </apply>
                  <ci>EGF</ci>
                  <ci>EGFR</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>kb1</ci>
                  <ci>EGF_EGFR</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>EGFR</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>kf1</ci>
                  </apply>
                  <ci>EGF</ci>
                  <ci>EGFR</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>kb1</ci>
                  <ci>EGF_EGFR</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>EGF_EGFR</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>kf1</ci>
                        <ci>EGF</ci>
                        <ci>EGFR</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>kb1</ci>
                        <ci>EGF_EGFR</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kf2</ci>
                     <ci>EGF_EGFR</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kb2</ci>
                  <ci>EGF_EGFR_INTERNAL</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>EGF_EGFR_INTERNAL</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>kf2</ci>
                  <ci>EGF_EGFR</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>kb2</ci>
                  <ci>EGF_EGFR_INTERNAL</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="SHCtoSHCStar">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="um" name="km3" initial_value="0.83333333333"/>
      <variable units="per_s" name="kf4" initial_value="0.0016667"/>
      <variable units="per_s" name="kb4" initial_value="0"/>
      <variable units="per_um_s" name="kf5" initial_value="0.000000041667"/>
      <variable units="per_s" name="kb5" initial_value="0.0168"/>
      <variable units="per_um_s" name="kf6" initial_value="0.0000008333"/>
      <variable units="per_s" name="kb6" initial_value="0.1"/>
      <variable units="per_s" name="kf8" initial_value="0.001"/>
      <variable units="per_s" name="kb8" initial_value="0"/>
      <variable units="per_um_s" name="kf10" initial_value="0.000000041667"/>
      <variable units="per_s" name="kb10" initial_value="0.0168"/>
      <variable units="um" name="km7" initial_value="0.40404"/>
      <variable units="um" name="km9" initial_value="2.564166667"/>
      <variable units="per_s" name="Vmax7" initial_value="0.02"/>
      <variable units="per_s" name="Vmax3" initial_value="0.2"/>
      <variable units="per_s" name="Vmax9" initial_value="10"/>
      <variable units="um" public_interface="in" name="EGF_EGFR"/>
      <variable units="um" name="SHC" initial_value="0.5"/>
      <variable units="um" public_interface="out" name="SHCstar" initial_value="0"/>
      <variable units="um" public_interface="out" name="SHCstar_SOS_GRB2" initial_value="0"/>
      <variable units="um" name="SOS_GRB2" initial_value="0"/>
      <variable units="um" name="SOS" initial_value="0.1"/>
      <variable units="um" name="GRB2" initial_value="1"/>
      <variable units="um" name="MAPK" initial_value="0.36"/>
      <variable units="um" name="SOSstar" initial_value="0"/>
      <variable units="um" public_interface="out" name="SOSstar_GRB2" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>SHCstar</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>EGF_EGFR</ci>
                        <ci>Vmax3</ci>
                        <ci>SHC</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>km3</ci>
                        <ci>SHC</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kf6</ci>
                     <ci>SHCstar</ci>
                     <ci>SOS_GRB2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kb6</ci>
                  <ci>SHCstar_SOS_GRB2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>SHC</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>kf4</ci>
                     <ci>SHCstar</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kb4</ci>
                     <ci>SHC</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>EGF_EGFR</ci>
                     <ci>Vmax3</ci>
                     <ci>SHC</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km3</ci>
                     <ci>SHC</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>SHCstar_SOS_GRB2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>kf6</ci>
                  <ci>SHCstar</ci>
                  <ci>SOS_GRB2</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>kb6</ci>
                  <ci>SHCstar_SOS_GRB2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>SOS_GRB2</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <ci>kf6</ci>
                        </apply>
                        <ci>SHCstar</ci>
                        <ci>SOS_GRB2</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>kb6</ci>
                        <ci>SHCstar_SOS_GRB2</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kb5</ci>
                     <ci>SOS_GRB2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kf5</ci>
                  <ci>SOS</ci>
                  <ci>GRB2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>SOS</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>kf8</ci>
                     <ci>SOSstar</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kb8</ci>
                     <ci>SOS</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>MAPK</ci>
                     <ci>Vmax9</ci>
                     <ci>SOS</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km9</ci>
                     <ci>SOS</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>SOSstar</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <ci>kf8</ci>
                        </apply>
                        <ci>SOSstar</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>kb8</ci>
                        <ci>SOS</ci>
                     </apply>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>MAPK</ci>
                           <ci>Vmax9</ci>
                           <ci>SOS</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km9</ci>
                           <ci>SOS</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kf10</ci>
                     <ci>SOSstar</ci>
                     <ci>GRB2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kb10</ci>
                  <ci>SOSstar_GRB2</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>SOSstar_GRB2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>kf10</ci>
                  <ci>SOSstar</ci>
                  <ci>GRB2</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>kb10</ci>
                  <ci>SOSstar_GRB2</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="GDPrasToGTPras">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="um" name="km7" initial_value="0.50505"/>
      <variable units="per_s" name="Vmax7" initial_value="0.02"/>
      <variable units="um" public_interface="in" name="SOSstar_GRB2"/>
      <variable units="um" name="GDP_ras" initial_value="1"/>
      <variable units="um" name="GTP_ras" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GDP_ras</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>SOSstar_GRB2</ci>
                  </apply>
                  <ci>Vmax7</ci>
                  <ci>GDP_ras</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>km7</ci>
                  <ci>GDP_ras</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GTP_ras</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>SOSstar_GRB2</ci>
                  <ci>Vmax7</ci>
                  <ci>GDP_ras</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>km7</ci>
                  <ci>GDP_ras</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_2="environment" component_1="EGF_EGFRtoEGFEGFR"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="GDPrasToGTPras"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="SHCtoSHCStar"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="SHCtoSHCStar" component_1="EGF_EGFRtoEGFEGFR"/>
      <map_variables variable_2="EGF_EGFR" variable_1="EGF_EGFR"/>
   </connection>
   <connection>
      <map_components component_2="GDPrasToGTPras" component_1="SHCtoSHCStar"/>
      <map_variables variable_2="SOSstar_GRB2" variable_1="SOSstar_GRB2"/>
   </connection>

<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#8193a6f6-6656-461a-a85f-6a637085273f">
    <rdf:li rdf:resource="rdf:#39d7ad67-2eb2-4d56-8fed-ae138b648759"/>
    <rdf:li rdf:resource="rdf:#a27165fd-ea6d-4db3-b17b-f74b980eed9b"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
  <dc:title>EGFR pathway component of the Bhalla-Iyengar model</dc:title>
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#3bcf6463-be1f-45fe-a2a8-0c17fa70a6d3"/>
    <dcterms:created rdf:resource="rdf:#9d2c0c35-47ac-4f64-9a95-180c06fba6b8"/>
    <dc:creator rdf:resource="rdf:#4a84b243-53e9-42d0-a736-024aaffe0b3d"/>
    <cmeta:modification rdf:resource="rdf:#e07373c8-4d1d-43ee-ab8b-34ffcdb28c0c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bd5fecfd-33b9-4b9c-aadd-c072ec276639">
    <vCard:N rdf:resource="rdf:#74f2485c-5f52-4c2c-8951-763de8a76e8e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#083a850e-d3e1-44e4-b77c-65d09e50d901">
    <dc:title>Science</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e656990d-7d96-4122-b4fc-769086bbb1dc">
    <vCard:Given>Ravi</vCard:Given>
    <vCard:Family>Iyengar</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#14f1157c-50c0-4fb6-b5a0-ea3da34cc35b">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d3c63679-5ebb-4dcc-b33b-c4f2e584087d">
    <dcterms:W3CDTF>1999-01-15</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#39d7ad67-2eb2-4d56-8fed-ae138b648759">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#3b94e904-b048-4f1b-9101-fe919866ca8c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d6b26760-9de1-48e9-bdfe-3767275a5645">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>m.mccormick@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fcd02c5b-eb5f-4282-8155-435aa213f411">
    <dcterms:W3CDTF>2009-05-27T15:02:27+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4a84b243-53e9-42d0-a736-024aaffe0b3d">
    <vCard:ORG rdf:resource="rdf:#0d64feb8-cafd-4717-a21e-e660ed53d31d"/>
    <vCard:EMAIL rdf:resource="rdf:#d6b26760-9de1-48e9-bdfe-3767275a5645"/>
    <vCard:N rdf:resource="rdf:#0c92a8c2-a141-48f9-ad72-68d9e7401f17"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#db740e3b-1e08-4da5-b915-24ed84961a3c">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0d64feb8-cafd-4717-a21e-e660ed53d31d">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8540dfa0-b27d-42c2-8272-1b549f008285">
    <dc:creator rdf:resource="rdf:#14f1157c-50c0-4fb6-b5a0-ea3da34cc35b"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="#bhalla_model_1999">
  <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>signal_transduction</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>
    <bqs:reference rdf:resource="rdf:#295b17c4-7e17-42dc-b40b-a469824e75a2"/>
    <cmeta:comment rdf:resource="rdf:#8540dfa0-b27d-42c2-8272-1b549f008285"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e07373c8-4d1d-43ee-ab8b-34ffcdb28c0c">
    <dcterms:modified rdf:resource="rdf:#fcd02c5b-eb5f-4282-8155-435aa213f411"/>
    <rdf:value>updated curation status</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#bd5fecfd-33b9-4b9c-aadd-c072ec276639"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#74f2485c-5f52-4c2c-8951-763de8a76e8e">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a27165fd-ea6d-4db3-b17b-f74b980eed9b">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#e656990d-7d96-4122-b4fc-769086bbb1dc"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3b94e904-b048-4f1b-9101-fe919866ca8c">
    <vCard:Given>Upinder</vCard:Given>
    <vCard:Family>Bhalla</vCard:Family>
    <vCard:Other>S</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9d2c0c35-47ac-4f64-9a95-180c06fba6b8">
    <dcterms:W3CDTF>2007-08-28T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0c92a8c2-a141-48f9-ad72-68d9e7401f17">
    <vCard:Given>Matthew</vCard:Given>
    <vCard:Family>McCormick</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#295b17c4-7e17-42dc-b40b-a469824e75a2">
    <bqs:Pubmed_id>9888852</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#9364a233-b91b-4b13-8ee3-cdbf51b0a71b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9364a233-b91b-4b13-8ee3-cdbf51b0a71b">
    <dc:creator rdf:resource="rdf:#8193a6f6-6656-461a-a85f-6a637085273f"/>
    <dc:title>Emergent Properties of Networks of Biological Signaling Pathways</dc:title>
    <bqs:volume>283</bqs:volume>
    <bqs:first_page>381</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#083a850e-d3e1-44e4-b77c-65d09e50d901"/>
    <dcterms:issued rdf:resource="rdf:#d3c63679-5ebb-4dcc-b33b-c4f2e584087d"/>
    <bqs:last_page>387</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3bcf6463-be1f-45fe-a2a8-0c17fa70a6d3">
    <dc:creator rdf:resource="rdf:#db740e3b-1e08-4da5-b915-24ed84961a3c"/>
    <rdf:value/>
  </rdf:Description>
</rdf:RDF>
</model>