<?xml version='1.0' encoding='utf-8'?>
<!--
This CellML file was generated on 20/06/2007 at 12:39:18 at a.m. using:

COR (0.9.31.649)
Copyright 2002-2007 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="bhalla_model_1999" name="bi_model_1999_version01">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Emergent properties of networks of biological signaling pathways</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This particular version of the CellML model describes the RAS pathway component of the Bhalla-Iyengar model. This model is able to be solved but does not give the correct results as it is not connected to the other modules of the pathway. ValidateCellML verifies this model as valid CellML but detects unit inconsistencies.
    </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: Many distinct signaling pathways allow the cell to receive, process, and respond to information. Often, components of different pathways interact, resulting in signaling networks. Biochemical signaling networks were constructed with experimentally obtained constants and analyzed by computational methods to understand their role in complex biological processes. These networks exhibit emergent properties such as integration of signals across multiple time scales, generation of distinct outputs depending on input strength and duration, and self-sustaining feedback loops. Feedback can result in bistable behavior with discrete steady-state activities, well-defined input thresholds for transition between states and prolonged signal output, and signal modulation in response to transient stimuli. These properties of signaling networks raise the possibility that information for "learned behavior" of biological systems may be stored within intracellular biochemical reactions that comprise signaling pathways.
</para>

<para>
The original paper reference is cited below:
</para>

<para>
Emergent properties of networks of biological signaling pathways. Bhalla US, Iyengar R.
            <emphasis>Science</emphasis> 1999 Jan 15; 283(5400); 381-7.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=9888852&amp;dopt=Abstract">PubMed ID: 9888852</ulink>
</para>


<informalfigure float="0" id="fig_pathway_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="bhalla_iyengar_ras.png"/>
  </imageobject>
</mediaobject>
<caption>A rendering of the RAS pathway component of the Bhalla-Iyengar model.</caption>
</informalfigure>

</sect1>
</article>
</documentation>




   <units name="s">
      <unit units="second"/>
   </units>
   <units name="per_um_s">
      <unit units="mole" prefix="micro" exponent="-1"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="um">
      <unit units="litre" exponent="-1"/>
      <unit units="mole" prefix="micro"/>
   </units>
   <units name="um_per_s">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units name="per_s">
      <unit units="s" exponent="-1"/>
   </units>
   <component name="environment">
      <variable units="s" public_interface="out" name="t"/>
   </component>
   <component name="GEF">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="per_s" name="kf2" initial_value="1"/>
      <variable units="per_s" name="kb2" initial_value="0"/>
      <variable units="per_um_s" name="kf5" initial_value="0.0001"/>
      <variable units="per_s" name="kb5" initial_value="1"/>
      <variable units="per_s" name="kf7" initial_value="1"/>
      <variable units="per_s" name="kb7" initial_value="0"/>
      <variable units="per_um_s" name="kf8" initial_value="0.00001"/>
      <variable units="per_s" name="kb8" initial_value="1"/>
      <variable units="um" name="km1" initial_value="7.5"/>
      <variable units="per_s" name="Vmax1" initial_value="9"/>
      <variable units="um" name="km6" initial_value="3.33333333333"/>
      <variable units="per_s" name="Vmax6" initial_value="4"/>
      <variable units="um" public_interface="out" name="GEF_inact" initial_value="0.1"/>
      <variable units="um" name="GEF" initial_value="0"/>
      <variable units="um" public_interface="in" name="PKA"/>
      <variable units="um" name="Ca4CAM" initial_value="1"/>
      <variable units="um" public_interface="in" name="PKC"/>
      <variable units="um" name="Gby" initial_value="1"/>
      <variable units="um" public_interface="out" name="CaM_GEF" initial_value="0"/>
      <variable units="um" public_interface="out" name="Gby_GEF" initial_value="0"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GEF_inact</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>PKA</ci>
                           <ci>Vmax1</ci>
                           <ci>GEF</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km1</ci>
                           <ci>GEF</ci>
                        </apply>
                     </apply>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>PKC</ci>
                           <ci>Vmax6</ci>
                           <ci>GEF</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km6</ci>
                           <ci>GEF</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kf2</ci>
                     <ci>GEF_inact</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kf7</ci>
                  <ci>GEF_inact</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GEF</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <apply>
                                 <minus/>
                                 <apply>
                                    <plus/>
                                    <apply>
                                       <divide/>
                                       <apply>
                                          <times/>
                                          <ci>PKA</ci>
                                          <ci>Vmax1</ci>
                                          <ci>GEF</ci>
                                       </apply>
                                       <apply>
                                          <plus/>
                                          <ci>km1</ci>
                                          <ci>GEF</ci>
                                       </apply>
                                    </apply>
                                    <apply>
                                       <divide/>
                                       <apply>
                                          <times/>
                                          <ci>PKC</ci>
                                          <ci>Vmax6</ci>
                                          <ci>GEF</ci>
                                       </apply>
                                       <apply>
                                          <plus/>
                                          <ci>km6</ci>
                                          <ci>GEF</ci>
                                       </apply>
                                    </apply>
                                 </apply>
                                 <apply>
                                    <times/>
                                    <ci>kf2</ci>
                                    <ci>GEF_inact</ci>
                                 </apply>
                              </apply>
                              <apply>
                                 <times/>
                                 <ci>kf7</ci>
                                 <ci>GEF_inact</ci>
                              </apply>
                           </apply>
                        </apply>
                        <apply>
                           <times/>
                           <ci>kf5</ci>
                           <ci>Ca4CAM</ci>
                           <ci>GEF</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>kb5</ci>
                        <ci>CaM_GEF</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kf8</ci>
                     <ci>GEF</ci>
                     <ci>Gby</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kb8</ci>
                  <ci>Gby_GEF</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Gby</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>kf8</ci>
                  </apply>
                  <ci>GEF</ci>
                  <ci>Gby</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>kb8</ci>
                  <ci>Gby_GEF</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>CaM_GEF</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>kb5</ci>
                  </apply>
                  <ci>CaM_GEF</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>kf5</ci>
                  <ci>GEF</ci>
                  <ci>Ca4CAM</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Ca4CAM</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>kb5</ci>
                     </apply>
                     <ci>CaM_GEF</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kf5</ci>
                     <ci>GEF</ci>
                     <ci>Ca4CAM</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>Gby_GEF</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>kf8</ci>
                     </apply>
                     <ci>GEF</ci>
                     <ci>Gby</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kb8</ci>
                     <ci>Gby_GEF</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="GTPRAS">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="per_s" name="kf12" initial_value="0.0001"/>
      <variable units="per_s" name="kb12" initial_value="0"/>
      <variable units="um" name="km9" initial_value="0.50505"/>
      <variable units="per_s" name="Vmax9" initial_value="0.02"/>
      <variable units="um" name="km10" initial_value="0.50505"/>
      <variable units="per_s" name="Vmax10" initial_value="0.02"/>
      <variable units="um" name="km11" initial_value="0.50505"/>
      <variable units="per_s" name="Vmax11" initial_value="0.02"/>
      <variable units="um" name="km13" initial_value="1.0104"/>
      <variable units="per_s" name="Vmax13" initial_value="10"/>
      <variable units="um" name="GTP_RAS" initial_value="0"/>
      <variable units="um" name="GDP_RAS" initial_value="0.2"/>
      <variable units="um" public_interface="in" name="GAP"/>
      <variable units="um" public_interface="in" name="GEF_inact"/>
      <variable units="um" public_interface="in" name="Gby_GEF"/>
      <variable units="um" public_interface="in" name="CaM_GEF"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GTP_RAS</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <ci>GAP</ci>
                        </apply>
                        <ci>Vmax13</ci>
                        <ci>GTP_RAS</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>km13</ci>
                        <ci>GTP_RAS</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kf12</ci>
                     <ci>GTP_RAS</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>GEF_inact</ci>
                     <ci>Vmax10</ci>
                     <ci>GDP_RAS</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km10</ci>
                     <ci>GDP_RAS</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>Gby_GEF</ci>
                     <ci>Vmax11</ci>
                     <ci>GDP_RAS</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km11</ci>
                     <ci>GDP_RAS</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>CaM_GEF</ci>
                     <ci>Vmax9</ci>
                     <ci>GDP_RAS</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km9</ci>
                     <ci>GDP_RAS</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GDP_RAS</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <apply>
                              <minus/>
                              <ci>GAP</ci>
                           </apply>
                           <ci>Vmax13</ci>
                           <ci>GTP_RAS</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>km13</ci>
                           <ci>GTP_RAS</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>kf12</ci>
                        <ci>GTP_RAS</ci>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>GEF_inact</ci>
                        <ci>Vmax10</ci>
                        <ci>GDP_RAS</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>km10</ci>
                        <ci>GDP_RAS</ci>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>Gby_GEF</ci>
                        <ci>Vmax11</ci>
                        <ci>GDP_RAS</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>km11</ci>
                        <ci>GDP_RAS</ci>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>CaM_GEF</ci>
                        <ci>Vmax9</ci>
                        <ci>GDP_RAS</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>km9</ci>
                        <ci>GDP_RAS</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="GAP">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="per_s" name="kf4" initial_value="0.1"/>
      <variable units="per_s" name="kb4" initial_value="0"/>
      <variable units="um" name="km3" initial_value="3.33333333333"/>
      <variable units="per_s" name="Vmax3" initial_value="4"/>
      <variable units="um" public_interface="out" name="GAP" initial_value="0.002"/>
      <variable units="um" name="GAPstar" initial_value="0"/>
      <variable units="um" public_interface="in" name="PKC"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GAP</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>PKC</ci>
                     </apply>
                     <ci>Vmax3</ci>
                     <ci>GAP</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km3</ci>
                     <ci>GAP</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kf4</ci>
                  <ci>GAPstar</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>GAPstar</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>PKC</ci>
                     <ci>Vmax3</ci>
                     <ci>GAP</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>km3</ci>
                     <ci>GAP</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kf4</ci>
                  <ci>GAPstar</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="undefinedVariables">
      <variable units="s" public_interface="in" name="t"/>
      <variable units="um" public_interface="out" name="Ca4CAM" initial_value="1"/>
      <variable units="um" public_interface="out" name="Gby" initial_value="1"/>
      <variable units="um" public_interface="out" name="PKA" initial_value="1"/>
      <variable units="um" public_interface="out" name="PKC" initial_value="1"/>
   </component>
   <connection>
      <map_components component_2="environment" component_1="GEF"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="GTPRAS"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="GAP"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="environment" component_1="undefinedVariables"/>
      <map_variables variable_2="t" variable_1="t"/>
   </connection>
   <connection>
      <map_components component_2="GEF" component_1="undefinedVariables"/>
      <map_variables variable_2="PKA" variable_1="PKA"/>
      <map_variables variable_2="PKC" variable_1="PKC"/>
   </connection>
   <connection>
      <map_components component_2="GAP" component_1="undefinedVariables"/>
      <map_variables variable_2="PKC" variable_1="PKC"/>
   </connection>
   <connection>
      <map_components component_2="GTPRAS" component_1="GAP"/>
      <map_variables variable_2="GAP" variable_1="GAP"/>
   </connection>
   <connection>
      <map_components component_2="GTPRAS" component_1="GEF"/>
      <map_variables variable_2="GEF_inact" variable_1="GEF_inact"/>
      <map_variables variable_2="Gby_GEF" variable_1="Gby_GEF"/>
      <map_variables variable_2="CaM_GEF" variable_1="CaM_GEF"/>
   </connection>

<rdf:RDF>
  <rdf:Seq rdf:about="rdf:#777e6c49-f66e-4d20-8e1d-60cb4a815db6">
    <rdf:li rdf:resource="rdf:#74add5ee-cb11-4f59-bd7b-45257a043bc9"/>
    <rdf:li rdf:resource="rdf:#d3bfbf08-1365-44e9-8970-ebd28a74e66d"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
  <dc:title>RAS pathway component of the Bhalla-Iyengar model</dc:title>
    <dc:publisher/>
    <cmeta:comment rdf:resource="rdf:#4ae21cea-f17c-449a-a236-29837a1b517d"/>
    <dcterms:created rdf:resource="rdf:#f220052f-23f4-47e8-950a-d9db5537a029"/>
    <dc:creator rdf:resource="rdf:#02bba9da-1854-43b0-84bb-c6237171cfb0"/>
    <cmeta:modification rdf:resource="rdf:#e91e5d44-4372-4db9-934f-e1042b98ea1f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d5649a81-0a09-4e77-8b06-26de16e60b7e">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e91e5d44-4372-4db9-934f-e1042b98ea1f">
    <dcterms:modified rdf:resource="rdf:#0d1b7422-1854-4a91-9223-a30ec0dadcd3"/>
    <rdf:value>updated curation status</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#ae1ba31d-7b17-4563-a797-6043d4cc77f1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#02bba9da-1854-43b0-84bb-c6237171cfb0">
    <vCard:ORG rdf:resource="rdf:#0164bb7d-650c-494d-8de9-6abe7cb1f748"/>
    <vCard:EMAIL rdf:resource="rdf:#beed2f98-a8a7-444d-8aeb-379c4366d430"/>
    <vCard:N rdf:resource="rdf:#a4c165e8-0112-4259-95d9-e1e97178e56d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#74add5ee-cb11-4f59-bd7b-45257a043bc9">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#7f6d5403-6408-497b-b600-bcb317cf35dc"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ae1ba31d-7b17-4563-a797-6043d4cc77f1">
    <vCard:N rdf:resource="rdf:#d5649a81-0a09-4e77-8b06-26de16e60b7e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f220052f-23f4-47e8-950a-d9db5537a029">
    <dcterms:W3CDTF>2007-08-28T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#76adcbc9-4739-4a75-8c4c-d34327b40687">
    <dc:creator rdf:resource="rdf:#35b7f1d0-f58b-422f-84b3-ec165b5b3f13"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ee6adab1-3c7d-4b5d-9910-978f308b11f2">
    <bqs:Pubmed_id>9888852</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#17463107-c7e2-44dd-8303-fe483be89f60"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d9b4ce02-7c7c-4d2e-a2d9-0ca43ab42fc6">
    <dcterms:W3CDTF>1999-01-15</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0d1b7422-1854-4a91-9223-a30ec0dadcd3">
    <dcterms:W3CDTF>2009-05-27T15:34:24+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#874c43ca-023c-4c5a-b529-83d501c08fe2">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fedb8b10-2824-4133-b348-bd9a87e7e9c9">
    <vCard:Given>Ravi</vCard:Given>
    <vCard:Family>Iyengar</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0164bb7d-650c-494d-8de9-6abe7cb1f748">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="#bhalla_model_1999">
    <bqs:reference rdf:resource="rdf:#ee6adab1-3c7d-4b5d-9910-978f308b11f2"/>
<bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>signal_transduction</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>
    <cmeta:comment rdf:resource="rdf:#76adcbc9-4739-4a75-8c4c-d34327b40687"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4ae21cea-f17c-449a-a236-29837a1b517d">
    <dc:creator rdf:resource="rdf:#874c43ca-023c-4c5a-b529-83d501c08fe2"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#17463107-c7e2-44dd-8303-fe483be89f60">
    <dc:creator rdf:resource="rdf:#777e6c49-f66e-4d20-8e1d-60cb4a815db6"/>
    <dc:title>Emergent Properties of Networks of Biological Signaling Pathways</dc:title>
    <bqs:volume>283</bqs:volume>
    <bqs:first_page>381</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#e546690a-ee63-4b18-b1ac-87fa7a0f650d"/>
    <dcterms:issued rdf:resource="rdf:#d9b4ce02-7c7c-4d2e-a2d9-0ca43ab42fc6"/>
    <bqs:last_page>387</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#35b7f1d0-f58b-422f-84b3-ec165b5b3f13">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d3bfbf08-1365-44e9-8970-ebd28a74e66d">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#fedb8b10-2824-4133-b348-bd9a87e7e9c9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#beed2f98-a8a7-444d-8aeb-379c4366d430">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>m.mccormick@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a4c165e8-0112-4259-95d9-e1e97178e56d">
    <vCard:Given>Matthew</vCard:Given>
    <vCard:Family>McCormick</vCard:Family>
    <vCard:Other/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7f6d5403-6408-497b-b600-bcb317cf35dc">
    <vCard:Given>Upinder</vCard:Given>
    <vCard:Family>Bhalla</vCard:Family>
    <vCard:Other>S</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e546690a-ee63-4b18-b1ac-87fa7a0f650d">
    <dc:title>Science</dc:title>
  </rdf:Description>
</rdf:RDF>
</model>
