<?xml version='1.0'?>
<!--  FILE :  mosekilde_model_2001.xml

CREATED :  14th January 2003

LAST MODIFIED : 9th April 2003

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Mosekilde et al's
2001 mathematical model of bursting pancreatic beta cells.

CHANGES:  
  09/04/2003 - AAC - Added publication date information.  
    
-->
<model name="mosekilde_lading_yanchuk_maistrenko_2001_version01" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    <documentation xmlns="http://cellml.org/tmp-documentation">
        <article>
            <articleinfo>
                <title>Bifurcation Structure of a Model of Bursting Pancreatic Cells</title>
                <author>
                    <firstname>Catherine</firstname>
                    <surname>Lloyd</surname>
                    <affiliation>
                        <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
                    </affiliation>
                </author>
            </articleinfo>
            <section id="sec_status">
                <title>Model Status</title>
                <para>
            This model contains partial differentials and as such can not currently be solved by existing CellML tools.
          </para>
            </section>
            <sect1 id="sec_structure">
                <title>Model Structure</title>
                <para>
Through the continuous activity of ion pumps in the plasma membrane, relatively steep transmembrane electrochemical gradients are maintained.  Because the transmembrane distributions of many ions such as Na<superscript>+</superscript>, K<superscript>+</superscript> and Ca<superscript>2+</superscript> are far from equilibrium, cells are inclined towards excitable electrical activity, or the membrane potential, determined by relative charge distribution, exhibits complicated patterns of slow and fast oscillations associated with variations in the transmembrane ionic currents.  These dynamics play an essential role in intracellular function and intercellular communication.  
</para>
                <para>
When exposed to a threshold concentration of glucose, pancreatic beta-cells exhibit a complicated pattern of electrical activity.  Bursts of action potential spikes (the "active" phase) are observed, separated by a "silent" phase of membrane repolarisation.  Insulin secretion is dependent on the relative amount of time the cells spend in the active state, and this time increases with the concentration of extracellular glucose.  Bursting dynamics control the influx of Ca<superscript>2+</superscript> into the cell, and in turn, Ca<superscript>2+</superscript> triggers the release of insulin.  So, via this mechanism, the bursting dynamics of the pancreatic beta-cells regulate their response to varying glucose concentrations.  Below a threshold glucose concentration (about 5mM), the cells do not burst.  Above a certain concentration (> 22 mM), the cells display continuous spiking, and insulin secretion becomes saturated. 
</para>
                <para>
Mathematical models of pancreatic beta-cells are usually based on the Hodgkin-Huxley formalism (for the original model see <ulink url="${HTML_EXMPL_HHSA_INTRO}">The Hodgkin-Huxley Squid Axon Model, 1952</ulink>), with elaborations to account for Ca<superscript>2+</superscript> storage, glucose metabolism, and regulation by ATP and various hormones.  Several models have been published (see <ulink url="${HTML_REPOSITORY_INTRODUCTION}">the CellML repository</ulink> for more pancreatic beta-cell and calcium oscillation models), but although some have been established for some years, their bifurcation structure is so complicated it is not yet fully understood.  The goal of the 2001 Mosekilde <emphasis>et al.</emphasis> paper analysed here was to give an accurate, but simplified account of the bifurcation structure of the individual beta-cell (see <xref linkend="fig_cell_diagram"/> below).
</para>
                <para>
The complete original paper reference is cited below:
</para>
                <para>
Bifurcation structure of a model of bursting pancreatic cells, Erik Mosekilde, Brian Lading, Sergiy Yanchuk and Yuri Maistrenko, 2001, <emphasis>Biosystems</emphasis>, 63, 3-13. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11595325&amp;dopt=Abstract">PubMed ID: 11595325</ulink>
                </para>
                <para>
The raw CellML description of the model can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>
                </para>
                <informalfigure float="0" id="fig_cell_diagram">
                    <mediaobject>
                        <imageobject>
                            <objectinfo>
                                <title>diagram of the model</title>
                            </objectinfo>
                            <imagedata fileref="mosekilde_2001.png"/>
                        </imageobject>
                    </mediaobject>
                    <caption>A schematic representation of the ionic currents described by the Mosekilde <emphasis>et al.</emphasis> 2001 pancreatic beta-cell model.  The model includes a calcium current, I <subscript>Ca<superscript>2+</superscript>
                        </subscript>; a potassium current, I<subscript>K</subscript>; and a slow current, I<subscript>S</subscript>.</caption>
                </informalfigure>
            </sect1>
        </article>
    </documentation>
    <!--
    Below, we define some additional units for association with variables and
    constants within the model. 
  -->
    <units name="per_second">
        <unit exponent="-1" units="second"/>
    </units>
    <units name="millivolt">
        <unit prefix="milli" units="volt"/>
    </units>
    <units name="micromolar">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="microS_per_cm2">
        <unit prefix="micro" units="siemens"/>
        <unit exponent="-2" prefix="centi" units="metre"/>
    </units>
    <units name="nanoA_per_cm2">
        <unit prefix="nano" units="ampere"/>
        <unit exponent="-2" prefix="centi" units="metre"/>
    </units>
    <component name="environment">
        <variable name="time" public_interface="out" units="second"/>
    </component>
    <component cmeta:id="id_000000018" name="membrane">
        <variable name="V" public_interface="out" units="millivolt"/>
        <variable initial_value="0.02" name="tau" public_interface="out" units="second"/>
        <variable name="time" public_interface="in" units="second"/>
        <variable cmeta:id="id_000000006" name="i_K" public_interface="in" units="nanoA_per_cm2"/>
        <variable cmeta:id="id_000000015" name="i_Ca" public_interface="in" units="nanoA_per_cm2"/>
        <variable name="i_S" public_interface="in" units="nanoA_per_cm2"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="membrane_voltage_diff_eq">
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci> time </ci>
                    </bvar>
                    <ci> V </ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <ci> i_K </ci>
                            <ci> i_Ca </ci>
                            <ci> i_S </ci>
                        </apply>
                    </apply>
                    <ci> tau </ci>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000013" name="calcium_current">
        <variable cmeta:id="id_000000014" name="i_Ca" public_interface="out" units="nanoA_per_cm2"/>
        <variable name="J11" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="id_000000016" initial_value="25.0" name="V_Ca" units="millivolt"/>
        <variable cmeta:id="id_000000017" initial_value="3.6" name="g_Ca" units="microS_per_cm2"/>
        <variable name="time" public_interface="in" units="second"/>
        <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
        <variable name="V_K" public_interface="in" units="millivolt"/>
        <variable name="m_infinity" private_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="i_Ca_calculation">
                <eq/>
                <ci> i_Ca </ci>
                <apply>
                    <times/>
                    <ci> g_Ca </ci>
                    <ci> m_infinity </ci>
                    <apply>
                        <minus/>
                        <ci> V </ci>
                        <ci> V_Ca </ci>
                    </apply>
                </apply>
            </apply>
            <apply id="J11_calculation">
                <eq/>
                <ci> J11 </ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci> g_Ca </ci>
                        </apply>
                        <apply>
                            <partialdiff/>
                            <bvar>
                                <ci> V </ci>
                            </bvar>
                            <ci> m_infinity </ci>
                        </apply>
                        <apply>
                            <minus/>
                            <ci> V </ci>
                            <ci> V_Ca </ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci> g_Ca </ci>
                        <ci> m_infinity </ci>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <ci> V_Ca </ci>
                                <ci> V_K </ci>
                            </apply>
                            <apply>
                                <minus/>
                                <ci> V </ci>
                                <ci> V_K </ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="calcium_current_m_gate">
        <variable name="m_infinity" public_interface="out" units="dimensionless"/>
        <variable initial_value="12.0" name="theta_m" units="millivolt"/>
        <variable initial_value="-20.0" name="V_m" units="millivolt"/>
        <variable name="V" public_interface="in" units="millivolt"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="m_infinity_calculation">
                <eq/>
                <ci> m_infinity </ci>
                <apply>
                    <power/>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless"> 1.0 </cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci> V_m </ci>
                                    <ci> V </ci>
                                </apply>
                                <ci> theta_m </ci>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="dimensionless"> -1.0 </cn>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000001" name="potassium_current">
        <variable cmeta:id="id_000000002" name="i_K" public_interface="out" units="nanoA_per_cm2"/>
        <variable cmeta:id="id_000000003" initial_value="-75.0" name="V_K" public_interface="out" units="millivolt"/>
        <variable cmeta:id="id_000000010" name="J12" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="id_000000011" name="J21" private_interface="in" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="id_000000012" name="J22" private_interface="in" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="id_000000004" initial_value="10.0" name="g_K" units="microS_per_cm2"/>
        <variable name="time" private_interface="out" public_interface="in" units="second"/>
        <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
        <variable name="tau" private_interface="out" public_interface="in" units="second"/>
        <variable name="n" private_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="i_K_calculation">
                <eq/>
                <ci> i_K </ci>
                <apply>
                    <times/>
                    <ci> g_K </ci>
                    <ci> n </ci>
                    <apply>
                        <minus/>
                        <ci> V </ci>
                        <ci> V_K </ci>
                    </apply>
                </apply>
            </apply>
            <apply id="J12_calculation">
                <eq/>
                <ci> J12 </ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci> g_K </ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci> V </ci>
                        <ci> V_K </ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component cmeta:id="id_000000005" name="potassium_current_n_gate">
        <variable cmeta:id="id_000000009" name="n" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="id_000000008" name="J21" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="id_000000007" name="J22" public_interface="out" units="dimensionless"/>
        <variable name="n_infinity" units="dimensionless"/>
        <variable initial_value="5.6" name="theta_n" units="millivolt"/>
        <variable initial_value="0.85" name="delta" units="dimensionless"/>
        <variable initial_value="-16.0" name="V_n" units="millivolt"/>
        <variable name="V" public_interface="in" units="millivolt"/>
        <variable name="tau" public_interface="in" units="second"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="n_infinity_calculation">
                <eq/>
                <ci> n_infinity </ci>
                <apply>
                    <power/>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless"> 1.0 </cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci> V_n </ci>
                                    <ci> V </ci>
                                </apply>
                                <ci> theta_n </ci>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="dimensionless"> -1.0 </cn>
                </apply>
            </apply>
            <apply id="n_diff_eq">
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci> time </ci>
                    </bvar>
                    <ci> n </ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci> delta </ci>
                        <apply>
                            <minus/>
                            <ci> n_infinity </ci>
                            <ci> n </ci>
                        </apply>
                    </apply>
                    <ci> tau </ci>
                </apply>
            </apply>
            <apply id="J21_calculation">
                <eq/>
                <ci> J21 </ci>
                <apply>
                    <times/>
                    <ci> delta </ci>
                    <apply>
                        <partialdiff/>
                        <bvar>
                            <ci> V </ci>
                        </bvar>
                        <ci> n_infinity </ci>
                    </apply>
                </apply>
            </apply>
            <apply id="J22_calculation">
                <eq/>
                <ci> J22 </ci>
                <apply>
                    <minus/>
                    <ci> delta </ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="slow_current">
        <variable name="i_S" public_interface="out" units="nanoA_per_cm2"/>
        <variable initial_value="35.0" name="tau_S" private_interface="out" units="second"/>
        <variable name="J13" public_interface="out" units="dimensionless"/>
        <variable name="J33" public_interface="out" units="dimensionless"/>
        <variable name="J31" private_interface="in" public_interface="out" units="dimensionless"/>
        <variable initial_value="4.0" name="g_S" units="microS_per_cm2"/>
        <variable name="k_S" units="dimensionless"/>
        <variable name="time" private_interface="out" public_interface="in" units="second"/>
        <variable name="V" private_interface="out" public_interface="in" units="millivolt"/>
        <variable name="V_K" public_interface="in" units="millivolt"/>
        <variable name="S" private_interface="in" units="dimensionless"/>
        <variable name="tau" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="i_S_calculation">
                <eq/>
                <ci> i_S </ci>
                <apply>
                    <times/>
                    <ci> g_S </ci>
                    <ci> S </ci>
                    <apply>
                        <minus/>
                        <ci> V </ci>
                        <ci> V_K </ci>
                    </apply>
                </apply>
            </apply>
            <apply id="J13_calculation">
                <eq/>
                <ci> J13 </ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci> g_S </ci>
                    </apply>
                    <ci> k_S </ci>
                    <apply>
                        <minus/>
                        <ci> V </ci>
                        <ci> V_K </ci>
                    </apply>
                </apply>
            </apply>
            <apply id="k_S_calculation">
                <eq/>
                <ci> k_S </ci>
                <apply>
                    <divide/>
                    <ci> tau </ci>
                    <ci> tau_S </ci>
                </apply>
            </apply>
            <apply id="J33_calculation">
                <eq/>
                <ci> J33 </ci>
                <apply>
                    <minus/>
                    <ci> k_S </ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="slow_current_S_gate">
        <variable name="S" public_interface="out" units="dimensionless"/>
        <variable name="J31" public_interface="out" units="dimensionless"/>
        <variable name="S_infinity" units="dimensionless"/>
        <variable initial_value="10.0" name="theta_S" units="millivolt"/>
        <variable initial_value="-38.34" name="V_S" units="millivolt"/>
        <variable name="V" public_interface="in" units="millivolt"/>
        <variable name="tau_S" public_interface="in" units="second"/>
        <variable name="time" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="S_infinity_calculation">
                <eq/>
                <ci> S_infinity </ci>
                <apply>
                    <power/>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless"> 1.0 </cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <ci> V_S </ci>
                                    <ci> V </ci>
                                </apply>
                                <ci> theta_S </ci>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="dimensionless"> -1.0 </cn>
                </apply>
            </apply>
            <apply id="S_diff_eq">
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci> time </ci>
                    </bvar>
                    <ci> S </ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci> S_infinity </ci>
                        <ci> S </ci>
                    </apply>
                    <ci> tau_S </ci>
                </apply>
            </apply>
            <apply id="J31_calculation">
                <eq/>
                <ci> J31 </ci>
                <apply>
                    <partialdiff/>
                    <bvar>
                        <ci> V </ci>
                    </bvar>
                    <ci> S_infinity </ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="jacobian_matrix">
        <variable name="J" units="dimensionless"/>
        <variable name="J11" public_interface="in" units="dimensionless"/>
        <variable name="J12" public_interface="in" units="dimensionless"/>
        <variable name="J13" public_interface="in" units="dimensionless"/>
        <variable name="J21" public_interface="in" units="dimensionless"/>
        <variable name="J22" public_interface="in" units="dimensionless"/>
        <variable name="J31" public_interface="in" units="dimensionless"/>
        <variable name="J33" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply id="J_calculation">
                <eq/>
                <ci> J </ci>
                <matrix>
                    <matrixrow>
                        <ci> J11 </ci>
                        <ci> J12 </ci>
                        <ci> J13 </ci>
                    </matrixrow>
                    <matrixrow>
                        <ci> J21 </ci>
                        <ci> J22 </ci>
                        <cn cellml:units="dimensionless"> 0 </cn>
                    </matrixrow>
                    <matrixrow>
                        <ci> J31 </ci>
                        <cn cellml:units="dimensionless"> 0 </cn>
                        <ci> J33 </ci>
                    </matrixrow>
                </matrix>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="containment"/>
        <component_ref component="membrane">
            <component_ref component="calcium_current">
                <component_ref component="calcium_current_m_gate"/>
            </component_ref>
            <component_ref component="potassium_current">
                <component_ref component="potassium_current_n_gate"/>
            </component_ref>
            <component_ref component="slow_current">
                <component_ref component="slow_current_S_gate"/>
            </component_ref>
            <component_ref component="jacobian_matrix"/>
        </component_ref>
    </group>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="calcium_current">
            <component_ref component="calcium_current_m_gate"/>
        </component_ref>
        <component_ref component="potassium_current">
            <component_ref component="potassium_current_n_gate"/>
        </component_ref>
        <component_ref component="slow_current">
            <component_ref component="slow_current_S_gate"/>
        </component_ref>
    </group>
    <connection>
        <map_components component_1="membrane" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="calcium_current" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="slow_current" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="calcium_current" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="i_Ca" variable_2="i_Ca"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="i_K" variable_2="i_K"/>
        <map_variables variable_1="tau" variable_2="tau"/>
    </connection>
    <connection>
        <map_components component_1="slow_current" component_2="membrane"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="i_S" variable_2="i_S"/>
        <map_variables variable_1="tau" variable_2="tau"/>
    </connection>
    <connection>
        <map_components component_1="calcium_current" component_2="jacobian_matrix"/>
        <map_variables variable_1="J11" variable_2="J11"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="slow_current"/>
        <map_variables variable_1="V_K" variable_2="V_K"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="calcium_current"/>
        <map_variables variable_1="V_K" variable_2="V_K"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="jacobian_matrix"/>
        <map_variables variable_1="J12" variable_2="J12"/>
        <map_variables variable_1="J21" variable_2="J21"/>
        <map_variables variable_1="J22" variable_2="J22"/>
    </connection>
    <connection>
        <map_components component_1="slow_current" component_2="jacobian_matrix"/>
        <map_variables variable_1="J13" variable_2="J13"/>
        <map_variables variable_1="J31" variable_2="J31"/>
        <map_variables variable_1="J33" variable_2="J33"/>
    </connection>
    <connection>
        <map_components component_1="calcium_current" component_2="calcium_current_m_gate"/>
        <map_variables variable_1="m_infinity" variable_2="m_infinity"/>
        <map_variables variable_1="V" variable_2="V"/>
    </connection>
    <connection>
        <map_components component_1="potassium_current" component_2="potassium_current_n_gate"/>
        <map_variables variable_1="n" variable_2="n"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="tau" variable_2="tau"/>
        <map_variables variable_1="time" variable_2="time"/>
        <map_variables variable_1="J21" variable_2="J21"/>
        <map_variables variable_1="J22" variable_2="J22"/>
    </connection>
    <connection>
        <map_components component_1="slow_current" component_2="slow_current_S_gate"/>
        <map_variables variable_1="S" variable_2="S"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="tau_S" variable_2="tau_S"/>
        <map_variables variable_1="time" variable_2="time"/>
        <map_variables variable_1="J31" variable_2="J31"/>
    </connection>
    <rdf:RDF>
        <rdf:Description rdf:about="#id_000000001">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000002">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000003">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000004">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000005">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000006">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000007">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000008">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000009">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000010">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:50509"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0019870"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000011">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000012">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000013">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000014">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000015">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000016">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000017">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
            </isVersionOf>
        </rdf:Description>
        <rdf:Description rdf:about="#id_000000018">
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0030322"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0060075"/>
            </isVersionOf>
            <isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description rdf:about="http://identifiers.org/go/GO:0042391"/>
            </isVersionOf>
        </rdf:Description>
    </rdf:RDF>
</model>
