// created: W3CDTF 2009-03-03T00:00:00+00:00
// creator: Orgname University of Oxford; Orgunit Department of Physiology, Anatomy & Genetics; martin.fink@dpag.ox.ac.uk; Given Martin; Family Fink
// reference: Pubmed_id 19186188; Given Mary; Family Maleckar; Other M; Given Joseph; Family Greenstein; Other L; Given Natalia; Family Trayanova; Other A; Given Wayne; Family Giles; Other R; title Mathematical simulations of ligand-gated and cell-type specific effects on the action potential of human atrium; title Progress in Biophysics and Molecular Biology; W3CDTF 2009-01-00 00:00
// reference: subject_type keyword; electrophysiology; cardiac; pharmacology; cardiac myocyte
// comment: FN Catherine Lloyd; This CellML model is known to run in PCEnv and COR to recreate the published results. The units have been checked and are consistent.
def model maleckar_2009 as
  // Mathematical simulations of ligand-gated and cell-type specific effects on the action potential of human atrium
  //
  // Catherine Lloyd
  //
  // ABI
  //
  // Model Status
  //
  // This CellML model is known to run in PCEnv and COR to recreate the published results. The units have been checked and are consistent. The units were amended on June 29th 2020 to change Cm from 50 nA to 50 pA (as in the publication) - but without modifying the mathematics.
  //
  // Model Structure
  //
  // ABSTRACT: In the mammalian heart, myocytes and fibroblasts can communicate via gap junction, or connexin-mediated current flow. Some of the effects of this electrotonic coupling on the action potential waveform of the human ventricular myocyte have been analyzed in detail. The present study employs a recently developed mathematical model of the human atrial myocyte to investigate the consequences of this heterogeneous cell-cell interaction on the action potential of the human atrium. Two independent physiological processes which alter the physiology of the human atrium have been studied. i) The effects of the autonomic transmitter acetylcholine on the atrial action potential have been investigated by inclusion of a time-independent, acetylcholine-activated K+ current in this mathematical model of the atrial myocyte. ii) A non-selective cation current which is activated by natriuretic peptides has been incorporated into a previously published mathematical model of the cardiac fibroblast. These results identify subtle effects of acetylcholine, which arise from the nonlinear interactions between ionic currents in the human atrial myocyte. They also illustrate marked alterations in the action potential waveform arising from fibroblast-myocyte source-sink principles when the natriuretic peptide-mediated cation conductance is activated. Additional calculations also illustrate the effects of simultaneous activation of both of these cell-type specific conductances within the atrial myocardium. This study provides a basis for beginning to assess the utility of mathematical modeling in understanding detailed cell-cell interactions within the complex paracrine environment of the human atrial myocardium.
  //
  // The complete original paper reference is cited below:
  //
  // Mathematical simulations of ligand-gated and cell-type specific effects on the action potential of human atrium, Mary M. Maleckara, Joseph L. Greensteina, Natalia A. Trayanova and Wayne R. Giles, 2009, Progress in Biophysics and Molecular Biology PubMed ID: 19186188 (http://www.ncbi.nlm.nih.gov/pubmed/19186188?ordinalpos=1&itool=EntrezSystem2.PEntrez.Pubmed.Pubmed_ResultsPanel.Pubmed_DefaultReportPanel.Pubmed_RVDocSum)
  //
  // cell diagram
  //
  // Schematic diagram of the human atrial myocyte model. It includes the main time- and voltage-dependent ion currents which contribute to the generation of the human atrial action potential: INa, ICa,L, It, Ikur, IK1, IKr, and IKs. This model also includes electrogenic pump and exchanger currents: the sarcolemmal Ca2+ pump current (ICa,P), the Na+-Ca2+ exchanger current (INaCa), and the Na+-K+ pump current (INaK). These transporters are responsible for the maintenance of intracellular ion concentrations, and are balanced by Na+ and Ca2+ time-independent or background currents, IBNa and IBCa.
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2};
    unit second {expo: -4};
    unit ampere {expo: -1};
  enddef;
  def unit C_per_mol as
    unit second;
    unit ampere;
    unit mole {expo: -1};
  enddef;
  def unit dimensionless_times_1e_minus_3 as
    unit dimensionless {mult: 0.001};
  enddef;
  def unit m12_A_per_mol4_times_1e_minus_12 as
    unit metre {expo: 12, mult: 1e-12};
    unit ampere;
    unit mole {expo: -4};
  enddef;
  def unit m12_per_mol4 as
    unit metre {expo: 12};
    unit mole {expo: -4};
  enddef;
  def unit m3_A_per_mol_times_1e_minus_12 as
    unit metre {expo: 3, mult: 1e-12};
    unit ampere;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit m3_per_s_per_mol as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit m3_per_s_times_1e_minus_12 as
    unit metre {expo: 3, mult: 1e-12};
    unit second {expo: -1};
  enddef;
  def unit mJ_per_mol_per_K as
    unit gram;
    unit metre {expo: 2};
    unit second {expo: -2};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit mM as
    unit metre {expo: -3};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2};
    unit second {expo: -3};
    unit ampere {expo: -1};
  enddef;
  def unit nL as
    unit metre {expo: 3, mult: 1e-12};
  enddef;
  def unit nS as
    unit gram {expo: -1, mult: 1e-12};
    unit metre {expo: -2};
    unit second {expo: 3};
    unit ampere {expo: 2};
  enddef;
  def unit pA as
    unit ampere {mult: 1e-12};
  enddef;
  def unit pF as
    unit gram {expo: -1, mult: 1e-15};
    unit metre {expo: -2};
    unit second {expo: 4};
    unit ampere {expo: 2};
  enddef;

  def comp ACh_dependent_K_current as
    var ACh: mM {init: 1e-24};
    var Cm: pF {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var i_KACh: pA {pub: out};
    i_KACh = 10.0{mS_per_uF}/(1.0{dimensionless}+9.13652{dimensionless}/pow(ACh*1.0{m3_per_mol}, 0.477811{dimensionless}))*(0.0517{dimensionless}+0.4516{dimensionless}/(1.0{dimensionless}+exp((V+59.53{mV})/17.18{mV})))*(V-E_K)*Cm;
  enddef;

  def comp Ca_handling_by_the_SR as
    var Ca_d: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_rel: mM {init: 0.632613};
    var Ca_up: mM {init: 0.649195};
    var F: C_per_mol {pub: in};
    var F1: dimensionless {init: 0.470055};
    var F2: dimensionless {init: 0.002814};
    var I_up_max: pA {init: 2800.0};
    var J_O_Calse: hertz;
    var O_Calse: dimensionless {init: 0.431547};
    var Vol_rel: nL {init: 4.41e-05};
    var Vol_up: nL {init: 0.0003969};
    var alpha_rel: m3_A_per_mol_times_1e_minus_12 {init: 200000.0};
    var i_rel: pA {pub: out};
    var i_rel_f2: dimensionless;
    var i_rel_factor: dimensionless;
    var i_tr: pA;
    var i_up: pA {pub: out};
    var k_cyca: mM {init: 0.0003};
    var k_rel_d: mM {init: 0.003};
    var k_rel_i: mM {init: 0.0003};
    var k_srca: mM {init: 0.5};
    var k_xcs: dimensionless {init: 0.4};
    var r_Ca_d_factor: dimensionless;
    var r_Ca_d_term: dimensionless;
    var r_Ca_i_factor: dimensionless;
    var r_Ca_i_term: dimensionless;
    var r_act: hertz;
    var r_inact: hertz;
    var r_recov: hertz {init: 0.815};
    var tau_tr: second {init: 0.01};
    var time: second {pub: in};
    ode(Ca_rel, time) = (i_tr-i_rel)/(2.0{dimensionless}*Vol_rel*F)-31.0{mM}*J_O_Calse;
    ode(Ca_up, time) = (i_up-i_tr)/(2.0{dimensionless}*Vol_up*F);
    ode(F1, time) = r_recov*(1.0{dimensionless}-F1-F2)-r_act*F1;
    ode(F2, time) = r_act*F1-r_inact*F2;
    J_O_Calse = 480.0{m3_per_s_per_mol}*Ca_rel*(1.0{dimensionless}-O_Calse)-400.0{hertz}*O_Calse;
    ode(O_Calse, time) = J_O_Calse;
    i_rel = alpha_rel*i_rel_factor*(Ca_rel-Ca_i);
    i_rel_f2 = F2/(F2+0.25{dimensionless});
    i_rel_factor = i_rel_f2*i_rel_f2;
    i_tr = (Ca_up-Ca_rel)*2.0{dimensionless}*Vol_rel*F/tau_tr;
    i_up = I_up_max*(Ca_i/k_cyca-k_xcs*k_xcs*Ca_up/k_srca)/((Ca_i+k_cyca)/k_cyca+k_xcs*(Ca_up+k_srca)/k_srca);
    r_Ca_d_factor = r_Ca_d_term*r_Ca_d_term*r_Ca_d_term*r_Ca_d_term;
    r_Ca_d_term = Ca_d/(Ca_d+k_rel_d);
    r_Ca_i_factor = r_Ca_i_term*r_Ca_i_term*r_Ca_i_term*r_Ca_i_term;
    r_Ca_i_term = Ca_i/(Ca_i+k_rel_i);
    r_act = 203.8{hertz}*(r_Ca_i_factor+r_Ca_d_factor);
    r_inact = 33.96{hertz}+339.6{hertz}*r_Ca_i_factor;
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    var E_K: mV {pub: out};
    var F: C_per_mol {pub: in};
    var K_c: mM {pub: in};
    var K_i: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_t: nS {init: 8.25};
    var i_t: pA {pub: out};
    var r: dimensionless {pub: in};
    var s: dimensionless {pub: in};
    E_K = R*T/F*ln(K_c/K_i);
    i_t = g_t*r*s*(V-E_K);
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var V: mV {pub: in};
    var r: dimensionless {pub: out, init: 0.001089};
    var r_infinity: dimensionless;
    var tau_r: second;
    var time: second {pub: in};
    ode(r, time) = (r_infinity-r)/tau_r;
    r_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-1.0{mV})/(-11.0{mV})));
    tau_r = 0.0035{second}*exp(-V*V/30.0{mV}/30.0{mV})+0.0015{second};
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_gate as
    var V: mV {pub: in};
    var s: dimensionless {pub: out, init: 0.948597};
    var s_factor: dimensionless;
    var s_infinity: dimensionless;
    var tau_s: second;
    var time: second {pub: in};
    ode(s, time) = (s_infinity-s)/tau_s;
    s_factor = (V+52.45{mV})/15.8827{mV};
    s_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+40.5{mV})/11.5{mV}));
    tau_s = 0.025635{second}*exp(-s_factor*s_factor)+0.01414{second};
  enddef;

  def comp L_type_Ca_channel as
    var Ca_d: mM {pub: in};
    var E_Ca_app: mV {init: 60.0};
    var V: mV {pub: in};
    var d_L: dimensionless {pub: in};
    var f_Ca: dimensionless;
    var f_L1: dimensionless {pub: in};
    var f_L2: dimensionless {pub: in};
    var g_Ca_L: nS {init: 6.75};
    var i_Ca_L: pA {pub: out};
    var k_Ca: mM {init: 0.025};
    f_Ca = Ca_d/(Ca_d+k_Ca);
    i_Ca_L = g_Ca_L*d_L*(f_Ca*f_L1+(1.0{dimensionless}-f_Ca)*f_L2)*(V-E_Ca_app);
  enddef;

  def comp L_type_Ca_channel_d_L_gate as
    var V: mV {pub: in};
    var d_L: dimensionless {pub: out, init: 1.4e-05};
    var d_L_factor: dimensionless;
    var d_L_infinity: dimensionless;
    var tau_d_L: second;
    var time: second {pub: in};
    ode(d_L, time) = (d_L_infinity-d_L)/tau_d_L;
    d_L_factor = (V+35.0{mV})/30.0{mV};
    d_L_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+9.0{mV})/(-5.8{mV})));
    tau_d_L = 0.0027{second}*exp(-d_L_factor*d_L_factor)+0.002{second};
  enddef;

  def comp L_type_Ca_channel_f_L1_gate as
    var V: mV {pub: in};
    var f_L1: dimensionless {pub: out, init: 0.998597};
    var f_L_factor: mV {pub: out};
    var f_L_infinity: dimensionless {pub: out};
    var tau_f_L1: second;
    var time: second {pub: in};
    ode(f_L1, time) = (f_L_infinity-f_L1)/tau_f_L1;
    f_L_factor = V+40.0{mV};
    f_L_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+27.4{mV})/7.1{mV}));
    tau_f_L1 = 0.161{second}*exp(-f_L_factor*f_L_factor/14.4{mV}/14.4{mV})+0.01{second};
  enddef;

  def comp L_type_Ca_channel_f_L2_gate as
    var f_L2: dimensionless {pub: out, init: 0.998586};
    var f_L_factor: mV {pub: in};
    var f_L_infinity: dimensionless {pub: in};
    var tau_f_L2: second;
    var time: second {pub: in};
    ode(f_L2, time) = (f_L_infinity-f_L2)/tau_f_L2;
    tau_f_L2 = 1.3323{second}*exp(-f_L_factor*f_L_factor/14.2{mV}/14.2{mV})+0.0626{second};
  enddef;

  def comp Na_Ca_ion_exchanger_current as
    var Ca_c: mM {pub: in};
    var Ca_i: mM {pub: in};
    var F: C_per_mol {pub: in};
    var K_NaCa: m12_A_per_mol4_times_1e_minus_12 {init: 0.0374842};
    var Na_c: mM {pub: in};
    var Na_i: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var d_NaCa: m12_per_mol4 {init: 0.0003};
    var gamma_Na: dimensionless {init: 0.45};
    var i_NaCa: pA {pub: out};
    i_NaCa = K_NaCa*(Na_i*Na_i*Na_i*Ca_c*exp(F*V*gamma_Na/(R*T))-Na_c*Na_c*Na_c*Ca_i*exp((gamma_Na-1.0{dimensionless})*V*F/(R*T)))/(1.0{dimensionless}+d_NaCa*(Na_c*Na_c*Na_c*Ca_i+Na_i*Na_i*Na_i*Ca_c));
  enddef;

  def comp background_currents as
    var Ca_c: mM {pub: in};
    var Ca_i: mM {pub: in};
    var E_Ca: mV;
    var E_Na: mV {pub: in};
    var F: C_per_mol {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_B_Ca: nS {init: 0.078681};
    var g_B_Na: nS {init: 0.060599};
    var i_B_Ca: pA {pub: out};
    var i_B_Na: pA {pub: out};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_c/Ca_i);
    i_B_Ca = g_B_Ca*(V-E_Ca);
    i_B_Na = g_B_Na*(V-E_Na);
  enddef;

  def comp cleft_space_ion_concentrations as
    var Ca_b: mM {init: 1.8};
    var Ca_c: mM {pub: out, init: 1.815768};
    var F: C_per_mol {pub: in};
    var K_b: mM {init: 5.4};
    var K_c: mM {pub: out, init: 5.560224};
    var Na_b: mM {init: 130.0};
    var Na_c: mM {pub: out, init: 1.30022096000000005e+02};
    var Vol_c: nL {init: 8.00223999999999987e-04};
    var i_B_Ca: pA {pub: in};
    var i_B_Na: pA {pub: in};
    var i_CaP: pA {pub: in};
    var i_Ca_L: pA {pub: in};
    var i_K1: pA {pub: in};
    var i_Kr: pA {pub: in};
    var i_Ks: pA {pub: in};
    var i_Kur: pA {pub: in};
    var i_Na: pA {pub: in};
    var i_NaCa: pA {pub: in};
    var i_NaK: pA {pub: in};
    var i_t: pA {pub: in};
    var phi_Na_en: pA {pub: in};
    var tau_Ca: second {init: 24.7};
    var tau_K: second {init: 10.0};
    var tau_Na: second {init: 14.3};
    var time: second {pub: in};
    ode(Ca_c, time) = (Ca_b-Ca_c)/tau_Ca+(i_Ca_L+i_B_Ca+i_CaP-2.0{dimensionless}*i_NaCa)/(2.0{dimensionless}*Vol_c*F);
    ode(K_c, time) = (K_b-K_c)/tau_K+(i_t+i_Kur+i_K1+i_Ks+i_Kr-2.0{dimensionless}*i_NaK)/(Vol_c*F);
    ode(Na_c, time) = (Na_b-Na_c)/tau_Na+(i_Na+i_B_Na+3.0{dimensionless}*i_NaCa+3.0{dimensionless}*i_NaK+phi_Na_en)/(Vol_c*F);
  enddef;

  def comp delayed_rectifier_K_currents as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var g_Kr: nS {init: 0.5};
    var g_Ks: nS {init: 1.0};
    var i_Kr: pA {pub: out};
    var i_Ks: pA {pub: out};
    var n: dimensionless {pub: in};
    var pa: dimensionless {pub: in};
    var pip: dimensionless {pub: in};
    i_Kr = g_Kr*pa*pip*(V-E_K);
    i_Ks = g_Ks*n*(V-E_K);
  enddef;

  def comp delayed_rectifier_K_currents_n_gate as
    var V: mV {pub: in};
    var n: dimensionless {pub: out, init: 0.004374};
    var n_factor: dimensionless;
    var n_infinity: dimensionless;
    var tau_n: second;
    var time: second {pub: in};
    ode(n, time) = (n_infinity-n)/tau_n;
    n_factor = (V-20.0{mV})/20.0{mV};
    n_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-19.9{mV})/(-12.7{mV})));
    tau_n = 0.7{second}+0.4{second}*exp(-n_factor*n_factor);
  enddef;

  def comp delayed_rectifier_K_currents_pa_gate as
    var V: mV {pub: in};
    var p_a_infinity: dimensionless;
    var pa: dimensionless {pub: out, init: 5.3e-05};
    var pa_factor: dimensionless;
    var tau_pa: second;
    var time: second {pub: in};
    p_a_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+15.0{mV})/(-6.0{mV})));
    ode(pa, time) = (p_a_infinity-pa)/tau_pa;
    pa_factor = (V+20.1376{mV})/22.1996{mV};
    tau_pa = 0.03118{second}+0.21718{second}*exp(-pa_factor*pa_factor);
  enddef;

  def comp delayed_rectifier_K_currents_pi_gate as
    var V: mV {pub: in};
    var pip: dimensionless {pub: out};
    pip = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+55.0{mV})/24.0{mV}));
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp intracellular_Ca_buffering as
    var Ca_i: mM {pub: in};
    var J_O: hertz {pub: out};
    var J_O_C: hertz;
    var J_O_TC: hertz;
    var J_O_TMgC: hertz;
    var J_O_TMgMg: hertz;
    var Mg_i: mM {init: 2.5};
    var O: dimensionless {init: 1.38222};
    var O_C: dimensionless {init: 0.026766};
    var O_TC: dimensionless {init: 0.012922};
    var O_TMgC: dimensionless {init: 0.190369};
    var O_TMgMg: dimensionless {init: 0.714463};
    var time: second {pub: in};
    J_O = 0.08{dimensionless}*J_O_TC+0.16{dimensionless}*J_O_TMgC+0.045{dimensionless}*J_O_C;
    J_O_C = 200000.0{m3_per_s_per_mol}*Ca_i*(1.0{dimensionless}-O_C)-476.0{hertz}*O_C;
    J_O_TC = 78400.0{m3_per_s_per_mol}*Ca_i*(1.0{dimensionless}-O_TC)-392.0{hertz}*O_TC;
    J_O_TMgC = 200000.0{m3_per_s_per_mol}*Ca_i*(1.0{dimensionless}-O_TMgC-O_TMgMg)-6.6{hertz}*O_TMgC;
    J_O_TMgMg = 2000.0{m3_per_s_per_mol}*Mg_i*(1.0{dimensionless}-O_TMgC-O_TMgMg)-666.0{hertz}*O_TMgMg;
    ode(O, time) = J_O;
    ode(O_C, time) = J_O_C;
    ode(O_TC, time) = J_O_TC;
    ode(O_TMgC, time) = J_O_TMgC;
    ode(O_TMgMg, time) = J_O_TMgMg;
  enddef;

  def comp intracellular_ion_concentrations as
    var Ca_d: mM {pub: out, init: 7.1e-05};
    var Ca_i: mM {pub: out, init: 6.5e-05};
    var Cm: pF {pub: in};
    var F: C_per_mol {pub: in};
    var J_O: hertz {pub: in};
    var K_i: mM {pub: out, init: 1.29485991000000013e+02};
    var Na_i: mM {pub: out, init: 8.516766};
    var Vol_d: nL {init: 1.17679999999999998e-04};
    var Vol_i: nL {init: 0.005884};
    var i_B_Ca: pA {pub: in};
    var i_B_Na: pA {pub: in};
    var i_CaP: pA {pub: in};
    var i_Ca_L: pA {pub: in};
    var i_K1: pA {pub: in};
    var i_Kr: pA {pub: in};
    var i_Ks: pA {pub: in};
    var i_Kur: pA {pub: in};
    var i_Na: pA {pub: in};
    var i_NaCa: pA {pub: in};
    var i_NaK: pA {pub: in};
    var i_Stim: A_per_F {pub: in};
    var i_di: pA;
    var i_rel: pA {pub: in};
    var i_t: pA {pub: in};
    var i_up: pA {pub: in};
    var phi_Na_en: pA {pub: out, init: 0.0};
    var tau_di: second {init: 0.01};
    var time: second {pub: in};
    ode(Ca_d, time) = -(i_Ca_L+i_di)/(2.0{dimensionless}*Vol_d*F);
    ode(Ca_i, time) = -(i_B_Ca+i_CaP+i_up-(i_di+i_rel+2.0{dimensionless}*i_NaCa))/(2.0{dimensionless}*Vol_i*F)-1.0{mM}*J_O;
    ode(K_i, time) = -(i_t+i_Kur+i_K1+i_Ks+i_Kr-2.0{dimensionless}*i_NaK+i_Stim*Cm)/(Vol_i*F);
    ode(Na_i, time) = -(i_Na+i_B_Na+3.0{dimensionless}*i_NaCa+3.0{dimensionless}*i_NaK+phi_Na_en)/(Vol_i*F);
    i_di = (Ca_d-Ca_i)*2.0{dimensionless}*Vol_d*F/tau_di;
  enddef;

  def comp inward_rectifier as
    var E_K: mV {pub: in};
    var F: C_per_mol {pub: in};
    var K_c: mM {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var g_K1: nS {init: 3.1};
    var i_K1: pA {pub: out};
    i_K1 = g_K1*pow(K_c/1.0{mM}, 0.4457{dimensionless})*(V-E_K)/(1.0{dimensionless}+exp(1.5{dimensionless}*(V-E_K+3.6{mV})*F/(R*T)));
  enddef;

  def comp membrane as
    var Cm: pF {pub: out, init: 50.0};
    var F: C_per_mol {pub: out, init: 96487.0};
    var I: A_per_F;
    var Q_tot: mV;
    var R: mJ_per_mol_per_K {pub: out, init: 8314.0};
    var T: kelvin {pub: out, init: 306.15};
    var V: mV {pub: out, init: -7.40319819999999993e+01};
    var duration: second {init: 0.006};
    var i_B_Ca: pA {pub: in};
    var i_B_Na: pA {pub: in};
    var i_CaP: pA {pub: in};
    var i_Ca_L: pA {pub: in};
    var i_K1: pA {pub: in};
    var i_KACh: pA {pub: in};
    var i_Kr: pA {pub: in};
    var i_Ks: pA {pub: in};
    var i_Kur: pA {pub: in};
    var i_Na: pA {pub: in};
    var i_NaCa: pA {pub: in};
    var i_NaK: pA {pub: in};
    var i_Stim: A_per_F {pub: out};
    var i_t: pA {pub: in};
    var offset: second {init: 0.0};
    var past: second;
    var period: second {init: 1.0};
    var stim_amplitude: A_per_F;
    var stim_period: second {init: 1.0};
    var time: second {pub: in};
    I = (i_Na+i_Ca_L+i_t+i_Kur+i_K1+i_Kr+i_Ks+i_B_Na+i_B_Ca+i_NaK+i_CaP+i_NaCa+i_KACh)/Cm+i_Stim;
    Q_tot = 0.05{dimensionless}*V;
    ode(V, time) = -I*1000.0{dimensionless_times_1e_minus_3};
    i_Stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*stim_amplitude;
    past = floor(time/stim_period)*stim_period;
    stim_amplitude = -15.0{A_per_F};
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var Ca_i: mM {pub: in};
    var i_CaP: pA {pub: out};
    var i_CaP_max: pA {init: 4.0};
    var k_CaP: mM {init: 0.0002};
    i_CaP = i_CaP_max*Ca_i/(Ca_i+k_CaP);
  enddef;

  def comp sodium_current as
    var E_Na: mV {pub: out};
    var F: C_per_mol {pub: in};
    var Na_c: mM {pub: in};
    var Na_i: mM {pub: in};
    var P_Na: m3_per_s_times_1e_minus_12 {init: 0.0018};
    var R: mJ_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var h1: dimensionless {pub: in};
    var h2: dimensionless {pub: in};
    var i_Na: pA {pub: out};
    var m: dimensionless {pub: in};
    E_Na = R*T/F*ln(Na_c/Na_i);
    i_Na = P_Na*m*m*m*(0.9{dimensionless}*h1+0.1{dimensionless}*h2)*Na_c*V*F*F/(R*T)*(exp((V-E_Na)*F/(R*T))-1.0{dimensionless})/(exp(V*F/(R*T))-1.0{dimensionless});
  enddef;

  def comp sodium_current_h1_gate as
    var V: mV {pub: in};
    var h1: dimensionless {pub: out, init: 0.877202};
    var h_factor: dimensionless {pub: out};
    var h_infinity: dimensionless {pub: out};
    var tau_h1: second;
    var time: second {pub: in};
    ode(h1, time) = (h_infinity-h1)/tau_h1;
    h_factor = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+35.1{mV})/3.2{mV}));
    h_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+63.6{mV})/5.3{mV}));
    tau_h1 = 0.03{second}*h_factor+0.0003{second};
  enddef;

  def comp sodium_current_h2_gate as
    var h2: dimensionless {pub: out, init: 0.873881};
    var h_factor: dimensionless {pub: in};
    var h_infinity: dimensionless {pub: in};
    var tau_h2: second;
    var time: second {pub: in};
    ode(h2, time) = (h_infinity-h2)/tau_h2;
    tau_h2 = 0.12{second}*h_factor+0.003{second};
  enddef;

  def comp sodium_current_m_gate as
    var V: mV {pub: in};
    var m: dimensionless {pub: out, init: 0.003289};
    var m_factor: dimensionless;
    var m_infinity: dimensionless;
    var tau_m: second;
    var time: second {pub: in};
    ode(m, time) = (m_infinity-m)/tau_m;
    m_factor = (V+25.57{mV})/28.8{mV};
    m_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+27.12{mV})/(-8.21{mV})));
    tau_m = 4.2e-05{second}*exp(-m_factor*m_factor)+2.4e-05{second};
  enddef;

  def comp sodium_potassium_pump as
    var K_NaK_K: mM {init: 1.0};
    var K_c: mM {pub: in};
    var Na_i: mM {pub: in};
    var V: mV {pub: in};
    var i_NaK: pA {pub: out};
    var i_NaK_max: pA {init: 68.55};
    var pow_K_NaK_Na_15: dimensionless {init: 36.4829};
    var pow_Na_i_15: dimensionless;
    i_NaK = i_NaK_max*K_c/(K_c+K_NaK_K)*pow_Na_i_15/(pow_Na_i_15+pow_K_NaK_Na_15)*(V+150.0{mV})/(V+200.0{mV});
    pow_Na_i_15 = pow(Na_i*1.0{m3_per_mol}, 1.5{dimensionless});
  enddef;

  def comp ultra_rapid_K_current as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var a_ur: dimensionless {pub: in};
    var g_kur: nS {init: 2.25};
    var i_Kur: pA {pub: out};
    var i_ur: dimensionless {pub: in};
    i_Kur = g_kur*a_ur*i_ur*(V-E_K);
  enddef;

  def comp ultra_rapid_K_current_aur_gate as
    var V: mV {pub: in};
    var a_ur: dimensionless {pub: out, init: 0.000367};
    var a_ur_infinity: dimensionless;
    var tau_a_ur: second;
    var time: second {pub: in};
    ode(a_ur, time) = (a_ur_infinity-a_ur)/tau_a_ur;
    a_ur_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+6.0{mV})/8.6{mV}));
    tau_a_ur = 0.009{second}/(1.0{dimensionless}+exp((V+5.0{mV})/12.0{mV}))+0.0005{second};
  enddef;

  def comp ultra_rapid_K_current_iur_gate as
    var V: mV {pub: in};
    var i_ur: dimensionless {pub: out, init: 0.96729};
    var i_ur_infinity: dimensionless;
    var tau_i_ur: second;
    var time: second {pub: in};
    ode(i_ur, time) = (i_ur_infinity-i_ur)/tau_i_ur;
    i_ur_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+7.5{mV})/10.0{mV}));
    tau_i_ur = 0.59{second}/(1.0{dimensionless}+exp((V+60.0{mV})/10.0{mV}))+3.05{second};
  enddef;
  def map between ACh_dependent_K_current and Ca_independent_transient_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between ACh_dependent_K_current and membrane for
    vars Cm and Cm;
    vars V and V;
    vars i_KACh and i_KACh;
  enddef;
  def map between Ca_handling_by_the_SR and environment for
    vars time and time;
  enddef;
  def map between Ca_handling_by_the_SR and intracellular_ion_concentrations for
    vars Ca_d and Ca_d;
    vars Ca_i and Ca_i;
    vars i_rel and i_rel;
    vars i_up and i_up;
  enddef;
  def map between Ca_handling_by_the_SR and membrane for
    vars F and F;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_gate for
    vars s and s;
  enddef;
  def map between Ca_independent_transient_outward_K_current and cleft_space_ion_concentrations for
    vars K_c and K_c;
    vars i_t and i_t;
  enddef;
  def map between Ca_independent_transient_outward_K_current and delayed_rectifier_K_currents for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars K_i and K_i;
    vars i_t and i_t;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_t and i_t;
  enddef;
  def map between Ca_independent_transient_outward_K_current and ultra_rapid_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current_r_gate and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current_r_gate and membrane for
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s_gate and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s_gate and membrane for
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_L_gate for
    vars d_L and d_L;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_L1_gate for
    vars f_L1 and f_L1;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_L2_gate for
    vars f_L2 and f_L2;
  enddef;
  def map between L_type_Ca_channel and cleft_space_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars Ca_d and Ca_d;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel and membrane for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between L_type_Ca_channel_d_L_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel_d_L_gate and membrane for
    vars V and V;
  enddef;
  def map between L_type_Ca_channel_f_L1_gate and L_type_Ca_channel_f_L2_gate for
    vars f_L_factor and f_L_factor;
    vars f_L_infinity and f_L_infinity;
  enddef;
  def map between L_type_Ca_channel_f_L1_gate and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel_f_L1_gate and membrane for
    vars V and V;
  enddef;
  def map between L_type_Ca_channel_f_L2_gate and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_ion_exchanger_current and cleft_space_ion_concentrations for
    vars Ca_c and Ca_c;
    vars Na_c and Na_c;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_ion_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_ion_exchanger_current and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between background_currents and cleft_space_ion_concentrations for
    vars Ca_c and Ca_c;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
  enddef;
  def map between background_currents and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
  enddef;
  def map between background_currents and sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between cleft_space_ion_concentrations and delayed_rectifier_K_currents for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between cleft_space_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between cleft_space_ion_concentrations and intracellular_ion_concentrations for
    vars phi_Na_en and phi_Na_en;
  enddef;
  def map between cleft_space_ion_concentrations and inward_rectifier for
    vars K_c and K_c;
    vars i_K1 and i_K1;
  enddef;
  def map between cleft_space_ion_concentrations and membrane for
    vars F and F;
  enddef;
  def map between cleft_space_ion_concentrations and sarcolemmal_calcium_pump_current for
    vars i_CaP and i_CaP;
  enddef;
  def map between cleft_space_ion_concentrations and sodium_current for
    vars Na_c and Na_c;
    vars i_Na and i_Na;
  enddef;
  def map between cleft_space_ion_concentrations and sodium_potassium_pump for
    vars K_c and K_c;
    vars i_NaK and i_NaK;
  enddef;
  def map between cleft_space_ion_concentrations and ultra_rapid_K_current for
    vars i_Kur and i_Kur;
  enddef;
  def map between delayed_rectifier_K_currents and delayed_rectifier_K_currents_n_gate for
    vars n and n;
  enddef;
  def map between delayed_rectifier_K_currents and delayed_rectifier_K_currents_pa_gate for
    vars pa and pa;
  enddef;
  def map between delayed_rectifier_K_currents and delayed_rectifier_K_currents_pi_gate for
    vars pip and pip;
  enddef;
  def map between delayed_rectifier_K_currents and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between delayed_rectifier_K_currents and membrane for
    vars V and V;
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between delayed_rectifier_K_currents_n_gate and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_currents_n_gate and membrane for
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_currents_pa_gate and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_currents_pa_gate and membrane for
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_currents_pi_gate and membrane for
    vars V and V;
  enddef;
  def map between environment and intracellular_Ca_buffering for
    vars time and time;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and sodium_current_h1_gate for
    vars time and time;
  enddef;
  def map between environment and sodium_current_h2_gate for
    vars time and time;
  enddef;
  def map between environment and sodium_current_m_gate for
    vars time and time;
  enddef;
  def map between environment and ultra_rapid_K_current_aur_gate for
    vars time and time;
  enddef;
  def map between environment and ultra_rapid_K_current_iur_gate for
    vars time and time;
  enddef;
  def map between intracellular_Ca_buffering and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars J_O and J_O;
  enddef;
  def map between intracellular_ion_concentrations and inward_rectifier for
    vars i_K1 and i_K1;
  enddef;
  def map between intracellular_ion_concentrations and membrane for
    vars Cm and Cm;
    vars F and F;
    vars i_Stim and i_Stim;
  enddef;
  def map between intracellular_ion_concentrations and sarcolemmal_calcium_pump_current for
    vars Ca_i and Ca_i;
    vars i_CaP and i_CaP;
  enddef;
  def map between intracellular_ion_concentrations and sodium_current for
    vars Na_i and Na_i;
    vars i_Na and i_Na;
  enddef;
  def map between intracellular_ion_concentrations and sodium_potassium_pump for
    vars Na_i and Na_i;
    vars i_NaK and i_NaK;
  enddef;
  def map between intracellular_ion_concentrations and ultra_rapid_K_current for
    vars i_Kur and i_Kur;
  enddef;
  def map between inward_rectifier and membrane for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_CaP and i_CaP;
  enddef;
  def map between membrane and sodium_current for
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and sodium_current_h1_gate for
    vars V and V;
  enddef;
  def map between membrane and sodium_current_m_gate for
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and ultra_rapid_K_current for
    vars V and V;
    vars i_Kur and i_Kur;
  enddef;
  def map between membrane and ultra_rapid_K_current_aur_gate for
    vars V and V;
  enddef;
  def map between membrane and ultra_rapid_K_current_iur_gate for
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h1_gate for
    vars h1 and h1;
  enddef;
  def map between sodium_current and sodium_current_h2_gate for
    vars h2 and h2;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
  enddef;
  def map between sodium_current_h1_gate and sodium_current_h2_gate for
    vars h_factor and h_factor;
    vars h_infinity and h_infinity;
  enddef;
  def map between ultra_rapid_K_current and ultra_rapid_K_current_aur_gate for
    vars a_ur and a_ur;
  enddef;
  def map between ultra_rapid_K_current and ultra_rapid_K_current_iur_gate for
    vars i_ur and i_ur;
  enddef;
enddef;
