// reference: subject_type keyword; electrophysiology
def model sampson_2010 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit L_per_F_per_ms_times_1e0 as
    unit gram;
    unit metre {expo: 5.0};
    unit second {expo: -5.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit dimensionless_times_1e_minus_3 as
    unit dimensionless {mult: 0.001};
  enddef;
  def unit g_m4_per_s4_per_A2_times_1e2 as
    unit gram {mult: 100};
    unit metre {expo: 4.0};
    unit second {expo: -4.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit m12_per_s_per_mol4_times_1e15 as
    unit metre {expo: 12.0, mult: 1000000000000000};
    unit second {expo: -1.0};
    unit mole {expo: -4.0};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m9_per_mol3 as
    unit metre {expo: 9.0};
    unit mole {expo: -3.0};
  enddef;
  def unit m9_per_s_per_mol3_times_1e12 as
    unit metre {expo: 9.0, mult: 1000000000000};
    unit second {expo: -1.0};
    unit mole {expo: -3.0};
  enddef;
  def unit mM as
    unit metre {expo: -3.0};
    unit mole;
  enddef;
  def unit mM3 as
    unit metre {expo: -9.0};
    unit mole {expo: 3.0};
  enddef;
  def unit mM3_times_1e_minus_9 as
    unit metre {expo: -9.0, mult: 1e-09};
    unit mole {expo: 3.0};
  enddef;
  def unit mM_per_ms as
    unit metre {expo: -3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mol4_per_m12 as
    unit metre {expo: -12.0};
    unit mole {expo: 4.0};
  enddef;
  def unit mol4_per_m12_times_1e_minus_12 as
    unit metre {expo: -12.0, mult: 1e-12};
    unit mole {expo: 4.0};
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mM_per_ms as
    unit metre {expo: 3.0, mult: 1000};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit s3_A_mol_per_g_per_m5 as
    unit gram {expo: -1.0};
    unit metre {expo: -5.0};
    unit second {expo: 3.0};
    unit ampere;
    unit mole;
  enddef;
  def unit uL as
    unit metre {expo: 3.0, mult: 1e-09};
  enddef;

  def comp caflux as
    var CaJSR: mM {pub: in};
    var CaNSR: mM {pub: in};
    var CaSS: mM {pub: in};
    var Cai: mM {pub: in};
    var HTRPNCa: dimensionless {pub: out, init: 9.74145534599999974e-01};
    var HTRPNtot: mM {init: 0.14};
    var Jtr: mM_per_ms {pub: out};
    var Jtrpn: mM_per_ms {pub: out};
    var Jxfer: mM_per_ms {pub: out};
    var LTRPNCa: dimensionless {pub: out, init: 7.05428108299999967e-02};
    var LTRPNtot: mM {init: 0.07};
    var caflux_HTRPNCa_a1: mS_per_uF;
    var caflux_LTRPNCa_a1: mS_per_uF;
    var khtrpn_minus: mS_per_uF {init: 6.6e-05};
    var khtrpn_plus: per_mM_per_ms {init: 20.0};
    var kltrpn_minus: mS_per_uF {init: 0.04};
    var kltrpn_plus: per_mM_per_ms {init: 40.0};
    var tautr: ms {init: 0.5747};
    var tauxfer: ms {init: 26.7};
    var time: ms {pub: in};
    ode(HTRPNCa, time) = khtrpn_plus*Cai*(1.0{dimensionless}-HTRPNCa)-caflux_HTRPNCa_a1;
    Jtr = (CaNSR-CaJSR)/tautr;
    Jtrpn = LTRPNtot*ode(LTRPNCa, time)+HTRPNtot*ode(HTRPNCa, time);
    Jxfer = (CaSS-Cai)/tauxfer;
    ode(LTRPNCa, time) = kltrpn_plus*Cai*(1.0{dimensionless}-LTRPNCa)-caflux_LTRPNCa_a1;
    caflux_HTRPNCa_a1 = khtrpn_minus*HTRPNCa;
    caflux_LTRPNCa_a1 = kltrpn_minus*LTRPNCa;
  enddef;

  def comp calcium as
    var CMDNtot: mM {init: 0.05};
    var CSQNtot: mM {init: 15.0};
    var CaJSR: mM {pub: out, init: 2.59679515799999983e-01};
    var CaNSR: mM {pub: out, init: 2.59898837400000027e-01};
    var CaSS: mM {pub: out, init: 1.24655751999999995e-04};
    var Cai: mM {pub: out, init: 7.56225546699999958e-05};
    var EGTAtot: mM {init: 0.0};
    var ICa: A_per_F {pub: in};
    var INaCa: A_per_F {pub: in};
    var IpCa: A_per_F {pub: in};
    var Jrel: mM_per_ms {pub: in};
    var Jtr: mM_per_ms {pub: in};
    var Jtrpn: mM_per_ms {pub: in};
    var Jup: mM_per_ms {pub: in};
    var Jxfer: mM_per_ms {pub: in};
    var KmCMDN: mM {init: 0.00238};
    var KmCSQN: mM {init: 0.8};
    var KmEGTA: mM {init: 0.00015};
    var VJSR: uL {pub: in};
    var VNSR: uL {pub: in};
    var VSS: uL {pub: in};
    var Vmyo: uL {pub: in};
    var beta_JSR: dimensionless;
    var beta_SS: dimensionless;
    var beta_i: dimensionless;
    var calcium_CaSS_a3: mM_per_ms;
    var calcium_Cai_a3: A_per_F;
    var calcium_beta_JSR_b1: dimensionless;
    var calcium_beta_SS_b1: dimensionless;
    var calcium_beta_SS_b2: dimensionless;
    var calcium_beta_i_b1: dimensionless;
    var calcium_beta_i_b2: dimensionless;
    var cell_a1: s3_A_mol_per_g_per_m5 {pub: in};
    var cell_a2: s3_A_mol_per_g_per_m5 {pub: in};
    var icat_I: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(CaJSR, time) = beta_JSR*(Jtr-Jrel);
    ode(CaNSR, time) = Jup*Vmyo/VNSR-Jtr*VJSR/VNSR;
    ode(CaSS, time) = beta_SS*(calcium_CaSS_a3-ICa*cell_a2-icat_I*cell_a2);
    ode(Cai, time) = beta_i*(Jxfer-Jup-Jtrpn-calcium_Cai_a3*0.5{dimensionless}*cell_a1);
    beta_JSR = 1.0{dimensionless}/(1.0{dimensionless}+calcium_beta_JSR_b1);
    beta_SS = 1.0{dimensionless}/(1.0{dimensionless}+calcium_beta_SS_b1+calcium_beta_SS_b2);
    beta_i = 1.0{dimensionless}/(1.0{dimensionless}+calcium_beta_i_b1+calcium_beta_i_b2);
    calcium_CaSS_a3 = Jrel*VJSR/VSS-Jxfer*Vmyo/VSS;
    calcium_Cai_a3 = -2.0{dimensionless}*INaCa+IpCa;
    calcium_beta_JSR_b1 = CSQNtot*KmCSQN/sqr(CaJSR+KmCSQN);
    calcium_beta_SS_b1 = CMDNtot*KmCMDN/sqr(CaSS+KmCMDN);
    calcium_beta_SS_b2 = EGTAtot*KmEGTA/sqr(CaSS+KmEGTA);
    calcium_beta_i_b1 = CMDNtot*KmCMDN/sqr(Cai+KmCMDN);
    calcium_beta_i_b2 = EGTAtot*KmEGTA/sqr(Cai+KmEGTA);
  enddef;

  def comp cell as
    var Acap: cm2 {init: 0.0003912};
    var F: C_per_mmol {pub: in};
    var VJSR: uL {pub: out, init: 1.36e-07};
    var VNSR: uL {pub: out, init: 1.785e-06};
    var VSS: uL {pub: out, init: 1.08e-09};
    var Vmyo: uL {pub: out, init: 2.196e-05};
    var a1: s3_A_mol_per_g_per_m5 {pub: out};
    var a2: s3_A_mol_per_g_per_m5 {pub: out};
    a1 = Acap/(Vmyo*F*1000.0{g_m4_per_s4_per_A2_times_1e2});
    a2 = Acap/(2.0{dimensionless}*VSS*F*1000.0{g_m4_per_s4_per_A2_times_1e2});
  enddef;

  def comp engine as
    var HTRPNCa: dimensionless {pub: in};
    var LTRPNCa: dimensionless {pub: in};
    var O2: dimensionless {pub: in};
    var ryr_C1: dimensionless {pub: in};
    var ryr_C2: dimensionless {pub: in};
    var time: ms {pub: out};
  enddef;

  def comp extra as
    var Cao: mM {pub: out, init: 2.0};
    var Ko: mM {pub: out, init: 4.0};
    var Nao: mM {pub: out, init: 138.0};
  enddef;

  def comp ical as
    var C0: dimensionless {init: 8.74379838900000039e-01};
    var C0_to_C1: mS_per_uF;
    var C0_to_CCa0: mS_per_uF;
    var C1: dimensionless {init: 2.55268330899999993e-02};
    var C1_to_C0: mS_per_uF;
    var C1_to_C2: mS_per_uF;
    var C1_to_CCa1: mS_per_uF;
    var C2: dimensionless {init: 2.79463949400000000e-04};
    var C2_to_C1: mS_per_uF;
    var C2_to_C3: mS_per_uF;
    var C2_to_CCa2: mS_per_uF;
    var C3: dimensionless {init: 1.35979496400000004e-06};
    var C3_to_C2: mS_per_uF;
    var C3_to_C4: mS_per_uF;
    var C3_to_CCa3: mS_per_uF;
    var C4: dimensionless {init: 2.48115507400000008e-09};
    var C4_to_C3: mS_per_uF;
    var C4_to_CCa4: mS_per_uF;
    var CCa0: dimensionless {init: 8.89536543300000065e-02};
    var CCa0_to_C0: mS_per_uF;
    var CCa0_to_CCa1: mS_per_uF;
    var CCa1: dimensionless {init: 1.03878563100000005e-02};
    var CCa1_to_C1: mS_per_uF;
    var CCa1_to_CCa0: mS_per_uF;
    var CCa1_to_CCa2: mS_per_uF;
    var CCa2: dimensionless {init: 4.54899679899999998e-04};
    var CCa2_to_C2: mS_per_uF;
    var CCa2_to_CCa1: mS_per_uF;
    var CCa2_to_CCa3: mS_per_uF;
    var CCa3: dimensionless {init: 8.85360913299999938e-06};
    var CCa3_to_C3: mS_per_uF;
    var CCa3_to_CCa2: mS_per_uF;
    var CCa3_to_CCa4: mS_per_uF;
    var CCa4: dimensionless {init: 6.46181672899999939e-08};
    var CCa4_to_C4: mS_per_uF;
    var CCa4_to_CCa3: mS_per_uF;
    var CaSS: mM {pub: in};
    var Cao: mM {pub: in};
    var ICa: A_per_F {pub: out};
    var ICaK: A_per_F {pub: out};
    var ICahalf: A_per_F;
    var ICamax: A_per_F {pub: out};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var Open: dimensionless {init: 1.85837559400000008e-10};
    var PCa: L_per_F_per_ms_times_1e0 {pub: out};
    var PK: L_per_F_per_ms_times_1e0;
    var PKprime: L_per_F_per_ms_times_1e0;
    var Pscale: dimensionless {init: 1.8};
    var V: mV {pub: in};
    var VFFRT: C_per_mmol {pub: in};
    var VFRT: dimensionless {pub: in};
    var aL: dimensionless {init: 2.0};
    var alpha: mS_per_uF;
    var alpha_prime: mS_per_uF;
    var bL: dimensionless {init: 2.0};
    var beta: mS_per_uF;
    var beta_prime: mS_per_uF;
    var fL: mS_per_uF {init: 0.3};
    var gL: mS_per_uF {init: 4.0};
    var gamma: mS_per_uF;
    var ical_C0_a1: mS_per_uF;
    var ical_C0_a2: mS_per_uF;
    var ical_C1_a1: mS_per_uF;
    var ical_C1_a2: mS_per_uF;
    var ical_C2_a1: mS_per_uF;
    var ical_C2_a2: mS_per_uF;
    var ical_C3_a1: mS_per_uF;
    var ical_C3_a2: mS_per_uF;
    var ical_C4_a1: mS_per_uF;
    var ical_C4_a2: mS_per_uF;
    var ical_CCa0_a1: mS_per_uF;
    var ical_CCa0_a2: mS_per_uF;
    var ical_CCa1_a1: mS_per_uF;
    var ical_CCa1_a2: mS_per_uF;
    var ical_CCa2_a1: mS_per_uF;
    var ical_CCa2_a2: mS_per_uF;
    var ical_CCa3_a1: mS_per_uF;
    var ical_CCa3_a2: mS_per_uF;
    var ical_CCa4_a1: mS_per_uF;
    var ical_CCa4_a2: mS_per_uF;
    var ical_ICaK_a1: mM;
    var ical_ICaK_a2: dimensionless;
    var ical_ICamax_a1: mM;
    var ical_ICamax_a2: dimensionless;
    var ical_yCa_yCa_inf_a1: dimensionless {init: 0.82};
    var imax: A_per_F;
    var omega: mS_per_uF {init: 0.0025};
    var tau_yCa: ms;
    var time: ms {pub: in};
    var yCa: dimensionless {init: 9.98998351100000015e-01};
    var yCa_inf: dimensionless;
    ode(C0, time) = ical_C0_a2-ical_C0_a1;
    C0_to_C1 = 4.0{dimensionless}*alpha;
    C0_to_CCa0 = gamma;
    ode(C1, time) = ical_C1_a2-ical_C1_a1;
    C1_to_C0 = beta;
    C1_to_C2 = 3.0{dimensionless}*alpha;
    C1_to_CCa1 = aL*C0_to_CCa0;
    ode(C2, time) = ical_C2_a2-ical_C2_a1;
    C2_to_C1 = 2.0{dimensionless}*beta;
    C2_to_C3 = 2.0{dimensionless}*alpha;
    C2_to_CCa2 = aL*C1_to_CCa1;
    ode(C3, time) = ical_C3_a2-ical_C3_a1;
    C3_to_C2 = 3.0{dimensionless}*beta;
    C3_to_C4 = alpha;
    C3_to_CCa3 = aL*C2_to_CCa2;
    ode(C4, time) = ical_C4_a2-ical_C4_a1;
    C4_to_C3 = 4.0{dimensionless}*beta;
    C4_to_CCa4 = aL*C3_to_CCa3;
    ode(CCa0, time) = ical_CCa0_a2-ical_CCa0_a1;
    CCa0_to_C0 = omega;
    CCa0_to_CCa1 = 4.0{dimensionless}*alpha_prime;
    ode(CCa1, time) = ical_CCa1_a2-ical_CCa1_a1;
    CCa1_to_C1 = CCa0_to_C0/bL;
    CCa1_to_CCa0 = beta_prime;
    CCa1_to_CCa2 = 3.0{dimensionless}*alpha_prime;
    ode(CCa2, time) = ical_CCa2_a2-ical_CCa2_a1;
    CCa2_to_C2 = CCa1_to_C1/bL;
    CCa2_to_CCa1 = 2.0{dimensionless}*beta_prime;
    CCa2_to_CCa3 = 2.0{dimensionless}*alpha_prime;
    ode(CCa3, time) = ical_CCa3_a2-ical_CCa3_a1;
    CCa3_to_C3 = CCa2_to_C2/bL;
    CCa3_to_CCa2 = 3.0{dimensionless}*beta_prime;
    CCa3_to_CCa4 = alpha_prime;
    ode(CCa4, time) = ical_CCa4_a2-ical_CCa4_a1;
    CCa4_to_C4 = CCa3_to_C3/bL;
    CCa4_to_CCa3 = 4.0{dimensionless}*beta_prime;
    ICa = ICamax*yCa*Open;
    ICaK = PKprime*Open*yCa*VFFRT*(ical_ICaK_a1/ical_ICaK_a2);
    ICahalf = -0.265{A_per_F};
    ICamax = PCa*4.0{dimensionless}*VFFRT*(ical_ICamax_a1/ical_ICamax_a2);
    ode(Open, time) = fL*C4-gL*Open;
    PCa = Pscale*0.2469{L_per_F_per_ms_times_1e0};
    PK = Pscale*0.0004574{L_per_F_per_ms_times_1e0};
    PKprime = PK/(1.0{dimensionless}+imax/ICahalf);
    alpha = 4.0{dimensionless}*1.2{dimensionless}*0.416{mS_per_uF}*exp(0.012{per_mV}*(V-35.0{mV}));
    alpha_prime = aL*alpha;
    beta = 4.0{dimensionless}*0.45{dimensionless}*0.049{mS_per_uF}*exp(-0.065{per_mV}*(V-22.0{mV}));
    beta_prime = beta/bL;
    gamma = 0.6{dimensionless}*0.09233{per_mM_per_ms}*CaSS;
    ical_C0_a1 = (C0_to_C1+C0_to_CCa0)*C0;
    ical_C0_a2 = C1_to_C0*C1+CCa0_to_C0*CCa0;
    ical_C1_a1 = (C1_to_C0+C1_to_C2+C1_to_CCa1)*C1;
    ical_C1_a2 = C0_to_C1*C0+C2_to_C1*C2+CCa1_to_C1*CCa1;
    ical_C2_a1 = (C2_to_C1+C2_to_C3+C2_to_CCa2)*C2;
    ical_C2_a2 = C1_to_C2*C1+C3_to_C2*C3+CCa2_to_C2*CCa2;
    ical_C3_a1 = (C3_to_C2+C3_to_C4+C3_to_CCa3)*C3;
    ical_C3_a2 = C2_to_C3*C2+C4_to_C3*C4+CCa3_to_C3*CCa3;
    ical_C4_a1 = (C4_to_C3+fL+C4_to_CCa4)*C4;
    ical_C4_a2 = C3_to_C4*C3+gL*Open+CCa4_to_C4*CCa4;
    ical_CCa0_a1 = (CCa0_to_CCa1+CCa0_to_C0)*CCa0;
    ical_CCa0_a2 = CCa1_to_CCa0*CCa1+C0_to_CCa0*C0;
    ical_CCa1_a1 = (CCa1_to_CCa0+CCa1_to_CCa2+CCa1_to_C1)*CCa1;
    ical_CCa1_a2 = CCa0_to_CCa1*CCa0+CCa2_to_CCa1*CCa2+C1_to_CCa1*C1;
    ical_CCa2_a1 = (CCa2_to_CCa1+CCa2_to_CCa3+CCa2_to_C2)*CCa2;
    ical_CCa2_a2 = CCa1_to_CCa2*CCa1+CCa3_to_CCa2*CCa3+C2_to_CCa2*C2;
    ical_CCa3_a1 = (CCa3_to_CCa2+CCa3_to_CCa4+CCa3_to_C3)*CCa3;
    ical_CCa3_a2 = CCa2_to_CCa3*CCa2+CCa4_to_CCa3*CCa4+C3_to_CCa3*C3;
    ical_CCa4_a1 = (CCa4_to_CCa3+CCa4_to_C4)*CCa4;
    ical_CCa4_a2 = CCa3_to_CCa4*CCa3+C4_to_CCa4*C4;
    ical_ICaK_a1 = Ki*exp(VFRT)-Ko;
    ical_ICaK_a2 = exp(VFRT)-1.0{dimensionless};
    ical_ICamax_a1 = 0.001{mM}*exp(2.0{dimensionless}*VFRT)-Cao*0.341{dimensionless};
    ical_ICamax_a2 = exp(2.0{dimensionless}*VFRT)-1.0{dimensionless};
    imax = sel
      case ICamax > 0.0{A_per_F}:
        0.0{A_per_F};
      otherwise:
        ICamax;
    endsel;
    tau_yCa = 1.0{dimensionless}/(3.36336209451999985e-3{mS_per_uF}/(0.5{dimensionless}+exp(V/(-5.53899874036055007{mV})))+7.79046570737000014e-3{mS_per_uF}*exp(V/(-4.95103963116038628e1{mV})));
    ode(yCa, time) = (yCa_inf-yCa)/tau_yCa;
    yCa_inf = ical_yCa_yCa_inf_a1/(1.0{dimensionless}+exp((V+28.5{mV})/7.8{mV}))+1.0{dimensionless}-ical_yCa_yCa_inf_a1;
  enddef;

  def comp icat as
    var I: A_per_F {pub: out};
    var ICamax: A_per_F {pub: in};
    var PCa: L_per_F_per_ms_times_1e0 {pub: in};
    var Ttypescale: L_per_F_per_ms_times_1e0 {init: 0.0075614};
    var V: mV {pub: in};
    var icat_l_inf: dimensionless;
    var icat_l_tau: ms;
    var icat_n_inf: dimensionless;
    var icat_n_tau: ms;
    var l: dimensionless {init: 5.48343768800000020e-01};
    var n: dimensionless {init: 2.08213191599999990e-03};
    var time: ms {pub: in};
    I = ICamax/PCa*Ttypescale*n*n*l;
    icat_l_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+75.6{mV})/6.2{mV}));
    icat_l_tau = sel
      case V < -60.0{mV}:
        500.0{ms};
      otherwise:
        18.3{ms}+0.005{ms}*exp(-V/6.2{mV});
    endsel;
    icat_n_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+48.4{mV})/5.2{mV}));
    icat_n_tau = sel
      case V < -56.0{mV}:
        2.44{ms}*exp((V+120.0{mV})/40.0{mV});
      otherwise:
        1.34{ms}+0.035{ms}*exp(-V/11.8{mV});
    endsel;
    ode(l, time) = (icat_l_inf-l)/icat_l_tau;
    ode(n, time) = (icat_n_inf-n)/icat_n_tau;
  enddef;

  def comp ihcn as
    var EK: mV {pub: in};
    var ENa: mV {pub: in};
    var IHCN: A_per_F {pub: out};
    var IHCNmax: mS_per_uF {init: 0.3225};
    var V: mV {pub: in};
    var VFRT: dimensionless {pub: in};
    var h_alpha: mS_per_uF;
    var h_beta: mS_per_uF;
    var h_delta: mS_per_uF;
    var h_f: dimensionless {init: 2.2361};
    var h_gamma: mS_per_uF;
    var hcn1: dimensionless {init: 3.45377576399999997e-01};
    var hcn10: dimensionless {init: 2.64074099199999987e-03};
    var hcn2: dimensionless {init: 4.08547201099999979e-01};
    var hcn3: dimensionless {init: 1.80893426200000013e-01};
    var hcn4: dimensionless {init: 3.54868422399999967e-02};
    var hcn5: dimensionless {init: 2.59639364999999980e-03};
    var hcn6: dimensionless {init: 1.13417300900000000e-03};
    var hcn7: dimensionless {init: 5.28665430399999966e-03};
    var hcn8: dimensionless {init: 9.66413904500000066e-03};
    var hcn9: dimensionless {init: 8.13729668700000075e-03};
    var time: ms {pub: in};
    IHCN = IHCNmax*(hcn6+hcn7+hcn8+hcn9+hcn10)*(V-(ENa/3.0{dimensionless}+2.0{dimensionless}*EK/3.0{dimensionless}));
    h_alpha = 0.0001712{mS_per_uF}*exp(-1.465{dimensionless}*VFRT)/1000.0{dimensionless};
    h_beta = 26.17{mS_per_uF}*exp(1.465{dimensionless}*VFRT)/1000.0{dimensionless};
    h_delta = 287.5{mS_per_uF}*exp(1.242{dimensionless}*VFRT)/1000.0{dimensionless};
    h_gamma = 0.04025{mS_per_uF}*exp(-1.242{dimensionless}*VFRT)/1000.0{dimensionless};
    ode(hcn1, time) = -(4.0{dimensionless}*h_gamma+h_alpha)*hcn1+h_delta*hcn2+h_beta*hcn6;
    ode(hcn10, time) = -(h_beta/pow(h_f, 4.0{dimensionless})+4.0{dimensionless}*h_delta/h_f)*hcn10+h_alpha*pow(h_f, 4.0{dimensionless})*hcn5+h_gamma*h_f*hcn9;
    ode(hcn2, time) = -(h_delta+3.0{dimensionless}*h_gamma+h_alpha*h_f)*hcn2+4.0{dimensionless}*h_gamma*hcn1+2.0{dimensionless}*h_delta*hcn3+h_beta/h_f*hcn7;
    ode(hcn3, time) = -(2.0{dimensionless}*h_delta+2.0{dimensionless}*h_gamma+h_alpha*sqr(h_f))*hcn3+3.0{dimensionless}*h_gamma*hcn2+3.0{dimensionless}*h_delta*hcn4+h_beta/sqr(h_f)*hcn8;
    ode(hcn4, time) = -(3.0{dimensionless}*h_delta+h_gamma+h_alpha*pow(h_f, 3.0{dimensionless}))*hcn4+2.0{dimensionless}*h_gamma*hcn3+4.0{dimensionless}*h_delta*hcn5+h_beta/pow(h_f, 3.0{dimensionless})*hcn9;
    ode(hcn5, time) = -(4.0{dimensionless}*h_delta+h_alpha*pow(h_f, 4.0{dimensionless}))*hcn5+h_gamma*hcn4+h_beta/pow(h_f, 4.0{dimensionless})*hcn10;
    ode(hcn6, time) = -(h_beta+4.0{dimensionless}*h_gamma*h_f)*hcn6+h_alpha*hcn1+h_delta/h_f*hcn7;
    ode(hcn7, time) = -(h_beta/h_f+h_delta/h_f+3.0{dimensionless}*h_gamma*h_f)*hcn7+h_alpha*h_f*hcn2+4.0{dimensionless}*h_gamma*h_f*hcn6+2.0{dimensionless}*h_delta/h_f*hcn8;
    ode(hcn8, time) = -(h_beta/sqr(h_f)+2.0{dimensionless}*h_delta/h_f+2.0{dimensionless}*h_gamma*h_f)*hcn8+h_alpha*sqr(h_f)*hcn3+3.0{dimensionless}*h_gamma*h_f*hcn7+3.0{dimensionless}*h_delta/h_f*hcn9;
    ode(hcn9, time) = -(h_beta/pow(h_f, 3.0{dimensionless})+3.0{dimensionless}*h_delta/h_f+h_gamma*h_f)*hcn9+h_alpha*pow(h_f, 3.0{dimensionless})*hcn4+2.0{dimensionless}*h_gamma*h_f*hcn8+4.0{dimensionless}*h_delta/h_f*hcn10;
  enddef;

  def comp ik1 as
    var EK: mV {pub: in};
    var GK1: mS_per_uF {init: 0.0226};
    var IK1: A_per_F {pub: out};
    var Ko: mM {pub: in};
    var V: mV {pub: in};
    var ik1_IK1_inf: dimensionless;
    IK1 = GK1*sqrt(Ko*1.0{m3_per_mol})*ik1_IK1_inf*(V-EK);
    ik1_IK1_inf = 1.0{dimensionless}/(0.9681{dimensionless}+exp((V+82.18623{mV})/15.88642{mV}));
  enddef;

  def comp ikr as
    var A0: mS_per_uF {init: 1.71476417330859998e-02};
    var A1: mS_per_uF {init: 3.96932838114099976e-02};
    var A2: mS_per_uF {init: 2.05744860597700009e-02};
    var A3: mS_per_uF {init: 1.34366604422999996e-03};
    var A4: mS_per_uF {init: 1.06663164912879999e-01};
    var A5: mS_per_uF {init: 6.46393910049000014e-03};
    var A6: mS_per_uF {init: 8.03937440300000057e-05};
    var B0: per_mV {init: 3.30460803883500034e-02};
    var B1: per_mV;
    var B2: per_mV {init: 2.61741271511800010e-02};
    var B3: per_mV;
    var B4: per_mV {init: 5.68908859717000021e-03};
    var B5: per_mV;
    var B6: per_mV {init: 6.98089239999999969e-07};
    var C1: dimensionless {init: 7.89638103000000036e-01};
    var C1H_to_C2H: mS_per_uF;
    var C2: dimensionless {init: 7.51317227500000002e-04};
    var C2H_to_C1H: mS_per_uF;
    var C2H_to_C3H: mS_per_uF;
    var C3: dimensionless {init: 1.31802129699999990e-04};
    var C3H_to_C2H: mS_per_uF;
    var C3H_to_IH: mS_per_uF;
    var C3H_to_OH: mS_per_uF;
    var EK: mV {pub: in};
    var GKr: mS_per_uF {init: 0.0383724};
    var I: dimensionless {init: 7.34187676599999975e-06};
    var IH_to_C3H: mS_per_uF;
    var IH_to_OH: mS_per_uF;
    var IKr: A_per_F {pub: out};
    var Ko: mM {pub: in};
    var O: dimensionless {init: 2.70143786700000017e-05};
    var OH_to_C3H: mS_per_uF;
    var OH_to_IH: mS_per_uF;
    var T_Const: dimensionless {init: 5.32000000100000037e+00};
    var V: mV {pub: in};
    var fKo: dimensionless;
    var ikr_C2_a1: mS_per_uF;
    var ikr_C2_a2: mS_per_uF;
    var ikr_C3_a1: mS_per_uF;
    var ikr_C3_a2: mS_per_uF;
    var ikr_I_a1: mS_per_uF;
    var ikr_I_a2: mS_per_uF;
    var ikr_O_a1: mS_per_uF;
    var ikr_O_a2: mS_per_uF;
    var time: ms {pub: in};
    B1 = -4.30605416397999985e-2{per_mV};
    B3 = -2.69138549839900015e-2{per_mV};
    B5 = -4.53664295954299968e-2{per_mV};
    ode(C1, time) = C2H_to_C1H*C2-C1H_to_C2H*C1;
    C1H_to_C2H = T_Const*A0*exp(B0*V);
    ode(C2, time) = ikr_C2_a1-ikr_C2_a2;
    C2H_to_C1H = T_Const*A1*exp(B1*V);
    C2H_to_C3H = T_Const*2.60836204333700014e-2{mS_per_uF};
    ode(C3, time) = ikr_C3_a1-ikr_C3_a2;
    C3H_to_C2H = T_Const*1.48329781321449999e-1{mS_per_uF};
    C3H_to_IH = T_Const*A6*exp(B6*V);
    C3H_to_OH = T_Const*A2*exp(B2*V);
    ode(I, time) = ikr_I_a1-ikr_I_a2;
    IH_to_C3H = OH_to_C3H*IH_to_OH*C3H_to_IH/(C3H_to_OH*OH_to_IH);
    IH_to_OH = T_Const*A5*exp(B5*V);
    IKr = GKr*fKo*O*(V-EK);
    ode(O, time) = ikr_O_a1-ikr_O_a2;
    OH_to_C3H = T_Const*A3*exp(B3*V);
    OH_to_IH = T_Const*A4*exp(B4*V);
    fKo = sqrt(Ko/4.0{mM});
    ikr_C2_a1 = C1H_to_C2H*C1+C3H_to_C2H*C3;
    ikr_C2_a2 = (C2H_to_C1H+C2H_to_C3H)*C2;
    ikr_C3_a1 = C2H_to_C3H*C2+OH_to_C3H*O+IH_to_C3H*I;
    ikr_C3_a2 = (C3H_to_IH+C3H_to_OH+C3H_to_C2H)*C3;
    ikr_I_a1 = C3H_to_IH*C3+OH_to_IH*O;
    ikr_I_a2 = (IH_to_C3H+IH_to_OH)*I;
    ikr_O_a1 = C3H_to_OH*C3+IH_to_OH*I;
    ikr_O_a2 = (OH_to_C3H+OH_to_IH)*O;
  enddef;

  def comp iks as
    var EK: mV {pub: in};
    var GKs: mS_per_uF {init: 2.80819022457099998e-02};
    var IKs: A_per_F {pub: out};
    var V: mV {pub: in};
    var iks_xf_wt_alpha: mS_per_uF;
    var iks_xf_wt_beta: mS_per_uF;
    var iks_xs_wt_alpha: mS_per_uF;
    var iks_xs_wt_beta: mS_per_uF;
    var time: ms {pub: in};
    var xf_wt: dimensionless {init: 7.40047161399999998e-04};
    var xs_wt: dimensionless {init: 1.95694799400000008e-01};
    IKs = GKs*xs_wt*xf_wt*(V-EK);
    iks_xf_wt_alpha = sel
      case V == 21.0{mV}:
        0.000146{per_mV_per_ms}/0.078{per_mV};
      otherwise:
        0.000146{per_mV_per_ms}*(V-21.0{mV})/(1.0{dimensionless}-exp(-0.078{per_mV}*(V-21.0{mV})));
    endsel;
    iks_xf_wt_beta = 0.00091{mS_per_uF}*exp(-0.028{per_mV}*V);
    iks_xs_wt_alpha = sel
      case V == -11.0{mV}:
        3.3e-5{per_mV_per_ms}/0.13{per_mV};
      otherwise:
        3.3e-5{per_mV_per_ms}*(V+11.0{mV})/(1.0{dimensionless}-exp(-0.13{per_mV}*(V+11.0{mV})));
    endsel;
    iks_xs_wt_beta = 0.0001{mS_per_uF}*exp(-0.015{per_mV}*V);
    ode(xf_wt, time) = iks_xf_wt_alpha*(1.0{dimensionless}-xf_wt)-iks_xf_wt_beta*xf_wt;
    ode(xs_wt, time) = iks_xs_wt_alpha*(1.0{dimensionless}-xs_wt)-iks_xs_wt_beta*xs_wt;
  enddef;

  def comp inaca as
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var INaCa: A_per_F {pub: out};
    var KmCa: mM {init: 1.38};
    var KmNa: mM {init: 87.5};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var VFRT: dimensionless {pub: in};
    var a1: mol4_per_m12;
    var a2: mol4_per_m12;
    var a3: dimensionless;
    var a4: mM;
    var a5: m9_per_mol3;
    var eta: dimensionless {init: 0.35};
    var kNaCa: A_per_F {init: 0.44};
    var ksat: dimensionless {init: 0.2};
    var nao3: mM3;
    INaCa = kNaCa*a5*(a1-a2)/(a4*a3);
    a1 = exp(eta*VFRT)*pow(Nai, 3.0{dimensionless})*Cao;
    a2 = exp((eta-1.0{dimensionless})*VFRT)*nao3*Cai;
    a3 = 1.0{dimensionless}+ksat*exp((eta-1.0{dimensionless})*VFRT);
    a4 = KmCa+Cao;
    a5 = 5000.0{dimensionless}/(pow(KmNa, 3.0{dimensionless})+nao3);
    nao3 = pow(Nao, 3.0{dimensionless});
  enddef;

  def comp inak as
    var INaK: A_per_F {pub: out};
    var INaKmax: A_per_F {init: 1.5};
    var KmKo: mM {init: 1.5};
    var KmNai: mM {init: 20.0};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var VFRT: dimensionless {pub: in};
    var fNaK: dimensionless;
    var inak_INaK_a1: dimensionless;
    var inak_INaK_a2: dimensionless;
    var inak_fNaK_a1: dimensionless;
    var inak_fNaK_a2: dimensionless;
    var sigma: dimensionless;
    INaK = INaKmax*fNaK*(inak_INaK_a1/inak_INaK_a2);
    fNaK = 1.0{dimensionless}/(inak_fNaK_a1+inak_fNaK_a2);
    inak_INaK_a1 = Ko/(Ko+KmKo);
    inak_INaK_a2 = 1.0{dimensionless}+pow(KmNai/Nai, 1.5{dimensionless});
    inak_fNaK_a1 = 1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*VFRT);
    inak_fNaK_a2 = 0.0365{dimensionless}*sigma*exp(-1.33{dimensionless}*VFRT);
    sigma = (exp(Nao/67.3{mM})-1.0{dimensionless})/7.0{dimensionless};
  enddef;

  def comp ipca as
    var Cai: mM {pub: in};
    var IpCa: A_per_F {pub: out};
    var IpCamax: A_per_F {init: 0.05};
    var KmpCa: mM {init: 0.0005};
    IpCa = IpCamax*Cai/(KmpCa+Cai);
  enddef;

  def comp isus as
    var EK: mV {pub: in};
    var Isus: A_per_F {pub: out};
    var Isusmax: mS_per_uF {init: 0.0919908};
    var V: mV {pub: in};
    Isus = Isusmax*(1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-20.0{mV})/12.0{mV})))*(V-EK);
  enddef;

  def comp ito as
    var C0: dimensionless {init: 9.12446021800000007e-01};
    var C0_to_C1: mS_per_uF;
    var C0_to_CI0: mS_per_uF;
    var C1: dimensionless {init: 5.57395224500000022e-02};
    var C1_to_C0: mS_per_uF;
    var C1_to_C2: mS_per_uF;
    var C1_to_CI1: mS_per_uF;
    var C2: dimensionless {init: 1.27681665400000005e-03};
    var C2_to_C1: mS_per_uF;
    var C2_to_C3: mS_per_uF;
    var C2_to_CI2: mS_per_uF;
    var C3: dimensionless {init: 1.29938504799999993e-05};
    var C3_to_C2: mS_per_uF;
    var C3_to_CI3: mS_per_uF;
    var C3_to_O: mS_per_uF;
    var CI0: dimensionless {init: 1.41240034599999995e-02};
    var CI0_to_C0: mS_per_uF;
    var CI0_to_CI1: mS_per_uF;
    var CI1: dimensionless {init: 1.10576340999999998e-02};
    var CI1_to_C1: mS_per_uF;
    var CI1_to_CI0: mS_per_uF;
    var CI1_to_CI2: mS_per_uF;
    var CI2: dimensionless {init: 4.37517185700000023e-03};
    var CI2_to_C2: mS_per_uF;
    var CI2_to_CI1: mS_per_uF;
    var CI2_to_CI3: mS_per_uF;
    var CI3: dimensionless {init: 9.10523457199999969e-04};
    var CI3_to_C3: mS_per_uF;
    var CI3_to_CI2: mS_per_uF;
    var CI3_to_OI: mS_per_uF;
    var EK: mV {pub: in};
    var G: mS_per_uF {init: 1.52138159999999995e-01};
    var Ito1: A_per_F {pub: out};
    var O: dimensionless {init: 4.95957872400000005e-08};
    var OI: dimensionless {init: 5.71714766299999999e-05};
    var OI_to_CI3: mS_per_uF;
    var OI_to_O: mS_per_uF;
    var O_to_C3: mS_per_uF;
    var O_to_OI: mS_per_uF;
    var V: mV {pub: in};
    var aa: per_mV {init: 0.028983};
    var ai: per_mV {init: 3.73015999999999994e-04};
    var alpha_act43: mS_per_uF;
    var alpha_inact43: mS_per_uF;
    var alphaa0: mS_per_uF {init: 0.543708};
    var alphai0: mS_per_uF {init: 0.0498424};
    var b1: dimensionless {init: 6.77348};
    var b2: dimensionless {init: 1.56212705152000009e+01};
    var b3: dimensionless {init: 2.87532603313000017e+01};
    var b4: dimensionless {init: 5.24576206679000052e+02};
    var ba: per_mV {init: 0.0468437};
    var beta_act43: mS_per_uF;
    var beta_inact43: mS_per_uF;
    var betaa0: mS_per_uF {init: 0.080185};
    var betai0: mS_per_uF {init: 8.19481999999999958e-04};
    var bi: per_mV {init: 5.374e-08};
    var f1: dimensionless {init: 1.8936};
    var f2: dimensionless {init: 1.42246474559999996e+01};
    var f3: dimensionless {init: 1.58574378389000003e+02};
    var f4: dimensionless {init: 1.42936645351000010e+02};
    var ito_C0_a1: mS_per_uF;
    var ito_C0_a2: mS_per_uF;
    var ito_C1_a1: mS_per_uF;
    var ito_C1_a2: mS_per_uF;
    var ito_C2_a1: mS_per_uF;
    var ito_C2_a2: mS_per_uF;
    var ito_C3_a1: mS_per_uF;
    var ito_C3_a2: mS_per_uF;
    var ito_CI0_a1: mS_per_uF;
    var ito_CI0_a2: mS_per_uF;
    var ito_CI1_a1: mS_per_uF;
    var ito_CI1_a2: mS_per_uF;
    var ito_CI2_a1: mS_per_uF;
    var ito_CI2_a2: mS_per_uF;
    var ito_CI3_a1: mS_per_uF;
    var ito_CI3_a2: mS_per_uF;
    var ito_OI_a1: mS_per_uF;
    var ito_OI_a2: mS_per_uF;
    var ito_O_a1: mS_per_uF;
    var ito_O_a2: mS_per_uF;
    var time: ms {pub: in};
    ode(C0, time) = ito_C0_a2-ito_C0_a1;
    C0_to_C1 = 4.0{dimensionless}*alpha_act43;
    C0_to_CI0 = beta_inact43;
    ode(C1, time) = ito_C1_a2-ito_C1_a1;
    C1_to_C0 = beta_act43;
    C1_to_C2 = 3.0{dimensionless}*alpha_act43;
    C1_to_CI1 = f1*beta_inact43;
    ode(C2, time) = ito_C2_a2-ito_C2_a1;
    C2_to_C1 = 2.0{dimensionless}*beta_act43;
    C2_to_C3 = 2.0{dimensionless}*alpha_act43;
    C2_to_CI2 = f2*beta_inact43;
    ode(C3, time) = ito_C3_a2-ito_C3_a1;
    C3_to_C2 = 3.0{dimensionless}*beta_act43;
    C3_to_CI3 = f3*beta_inact43;
    C3_to_O = alpha_act43;
    ode(CI0, time) = ito_CI0_a2-ito_CI0_a1;
    CI0_to_C0 = alpha_inact43;
    CI0_to_CI1 = 4.0{dimensionless}*b1*alpha_act43;
    ode(CI1, time) = ito_CI1_a2-ito_CI1_a1;
    CI1_to_C1 = alpha_inact43/b1;
    CI1_to_CI0 = beta_act43/f1;
    CI1_to_CI2 = 3.0{dimensionless}*b2*alpha_act43/b1;
    ode(CI2, time) = ito_CI2_a2-ito_CI2_a1;
    CI2_to_C2 = alpha_inact43/b2;
    CI2_to_CI1 = 2.0{dimensionless}*f1*beta_act43/f2;
    CI2_to_CI3 = 2.0{dimensionless}*b3*alpha_act43/b2;
    ode(CI3, time) = ito_CI3_a2-ito_CI3_a1;
    CI3_to_C3 = alpha_inact43/b3;
    CI3_to_CI2 = 3.0{dimensionless}*f2*beta_act43/f3;
    CI3_to_OI = b4*alpha_act43/b3;
    Ito1 = G*O*(V-EK);
    ode(O, time) = ito_O_a2-ito_O_a1;
    ode(OI, time) = ito_OI_a2-ito_OI_a1;
    OI_to_CI3 = 4.0{dimensionless}*f3*beta_act43/f4;
    OI_to_O = alpha_inact43/b4;
    O_to_C3 = 4.0{dimensionless}*beta_act43;
    O_to_OI = f4*beta_inact43;
    alpha_act43 = alphaa0*exp(aa*V);
    alpha_inact43 = alphai0*exp(-ai*V);
    beta_act43 = betaa0*exp(-ba*V);
    beta_inact43 = betai0*exp(bi*V);
    ito_C0_a1 = (C0_to_C1+C0_to_CI0)*C0;
    ito_C0_a2 = C1_to_C0*C1+CI0_to_C0*CI0;
    ito_C1_a1 = (C1_to_C2+C1_to_C0+C1_to_CI1)*C1;
    ito_C1_a2 = C2_to_C1*C2+CI1_to_C1*CI1+C0_to_C1*C0;
    ito_C2_a1 = (C2_to_C3+C2_to_C1+C2_to_CI2)*C2;
    ito_C2_a2 = C3_to_C2*C3+CI2_to_C2*CI2+C1_to_C2*C1;
    ito_C3_a1 = (C3_to_O+C3_to_C2+C3_to_CI3)*C3;
    ito_C3_a2 = O_to_C3*O+CI3_to_C3*CI3+C2_to_C3*C2;
    ito_CI0_a1 = (CI0_to_C0+CI0_to_CI1)*CI0;
    ito_CI0_a2 = C0_to_CI0*C0+CI1_to_CI0*CI1;
    ito_CI1_a1 = (CI1_to_CI2+CI1_to_C1+CI1_to_CI0)*CI1;
    ito_CI1_a2 = CI2_to_CI1*CI2+C1_to_CI1*C1+CI0_to_CI1*CI0;
    ito_CI2_a1 = (CI2_to_CI3+CI2_to_C2+CI2_to_CI1)*CI2;
    ito_CI2_a2 = CI3_to_CI2*CI3+C2_to_CI2*C2+CI1_to_CI2*CI1;
    ito_CI3_a1 = (CI3_to_OI+CI3_to_C3+CI3_to_CI2)*CI3;
    ito_CI3_a2 = OI_to_CI3*OI+C3_to_CI3*C3+CI2_to_CI3*CI2;
    ito_OI_a1 = (OI_to_O+OI_to_CI3)*OI;
    ito_OI_a2 = O_to_OI*O+CI3_to_OI*CI3;
    ito_O_a1 = (O_to_C3+O_to_OI)*O;
    ito_O_a2 = C3_to_O*C3+OI_to_O*OI;
  enddef;

  def comp membrane as
    var ICa: A_per_F {pub: in};
    var ICaK: A_per_F {pub: in};
    var IHCN: A_per_F {pub: in};
    var IK1: A_per_F {pub: in};
    var IKr: A_per_F {pub: in};
    var IKs: A_per_F {pub: in};
    var INa: A_per_F {pub: in};
    var INa1: A_per_F {pub: in};
    var INaCa: A_per_F {pub: in};
    var INaK: A_per_F {pub: in};
    var IpCa: A_per_F {pub: in};
    var Isus: A_per_F {pub: in};
    var Ito1: A_per_F {pub: in};
    var V: mV {pub: out, init: -8.03864711399999976e+01};
    var a1: A_per_F;
    var a2: A_per_F;
    var a3: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var amplitude: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var duration: ms {init: 0.5};
    var i_diff: A_per_F {init: 0.0};
    var i_ion: A_per_F;
    var i_stim: A_per_F {pub: out};
    var icat_I: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var offset: ms {init: 0.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var period: ms {init: 1000.0};
    var time: ms {pub: in};
    ode(V, time) = -(i_ion+i_diff+i_stim);
    a1 = INa+INa1+ICa+icat_I+ICaK+IKr+IKs+IHCN;
    a2 = IK1+INaCa+INaK+Ito1+Isus;
    a3 = IpCa;
    amplitude = -100.0{A_per_F};
    i_ion = a1+a2+a3;
    i_stim = sel(case time-offset-period*floor((time-offset)/period) < duration: 1.0{dimensionless}, otherwise: 0.0{dimensionless})*amplitude;
  enddef;

  def comp nav11 as
    var BC1: dimensionless {init: 3.66022597099999997e-10};
    var BC2: dimensionless {init: 1.72916501500000004e-07};
    var BC3: dimensionless {init: 3.12749104299999976e-05};
    var BO: dimensionless {init: 6.60499340399999993e-13};
    var C1: dimensionless {init: 4.69401528400000025e-06};
    var C2: dimensionless {init: 2.21514457499999992e-03};
    var C3: dimensionless {init: 4.00644227700000022e-01};
    var ENa: mV {pub: in};
    var GNa1: mS_per_uF {init: 9.0};
    var IC2: dimensionless {init: 3.35246803199999981e-04};
    var IC3: dimensionless {init: 5.99583493199999998e-02};
    var IF: dimensionless {init: 3.65674332999999992e-06};
    var INa1: A_per_F {pub: out};
    var IS1: dimensionless {init: 8.87492239200000053e-03};
    var IS2: dimensionless {init: 5.26928426500000047e-01};
    var O: dimensionless {init: 9.08194443799999939e-09};
    var V: mV {pub: in};
    var a11: mS_per_uF;
    var a12: mS_per_uF;
    var a13: mS_per_uF;
    var a2: mS_per_uF;
    var a3: mS_per_uF;
    var a4: mS_per_uF;
    var a5: mS_per_uF;
    var b11: mS_per_uF;
    var b12: mS_per_uF;
    var b13: mS_per_uF;
    var b2: mS_per_uF;
    var b3: mS_per_uF;
    var b4: mS_per_uF;
    var b5: mS_per_uF;
    var mu1: mS_per_uF {init: 4.3e-08};
    var mu2: mS_per_uF {init: 0.0003};
    var time: ms {pub: in};
    ode(BC1, time) = BO*b13+BC2*a12+C1*mu1-BC1*(a13+b12+mu2);
    ode(BC2, time) = BC1*b12+BC3*a11+C2*mu1-BC2*(a12+b11+mu2);
    ode(BC3, time) = BC2*b11+C3*mu1-BC3*(a11+mu2);
    ode(BO, time) = BC1*a13+O*mu1-BO*(b13+mu2);
    ode(C1, time) = IF*a3+BC1*mu2+O*b13+C2*a12-C1*(a13+b3+mu1+b12);
    ode(C2, time) = IC2*a3+BC2*mu2+C1*b12+C3*a11-C2*(a12+b3+mu1+b11);
    ode(C3, time) = IC3*a3+BC3*mu2+C2*b11-C3*(a11+b3+mu1);
    ode(IC2, time) = IF*b12+C2*b3+IC3*a11-IC2*(a12+a3+b11);
    ode(IC3, time) = IC2*b11+C3*b3-IC3*(a11+a3);
    ode(IF, time) = IS1*b4+O*a2+IC2*a12+C1*b3-IF*(a4+b2+b12+a3);
    INa1 = GNa1*(O+BO)*(V-ENa);
    ode(IS1, time) = IS2*b5+IF*a4-IS1*(a5+b4);
    ode(IS2, time) = IS1*a5-IS2*b5;
    ode(O, time) = IF*b2+BO*mu2+C1*a13-O*(a2+b13+mu1);
    a11 = 2.802{mS_per_uF}/(0.21{dimensionless}*exp(-V/17.0{mV})+0.23{dimensionless}*exp(-V/150.0{mV}));
    a12 = 2.802{mS_per_uF}/(0.23{dimensionless}*exp(-V/15.0{mV})+0.25{dimensionless}*exp(-V/150.0{mV}));
    a13 = 2.802{mS_per_uF}/(0.25{dimensionless}*exp(-V/12.0{mV})+0.27{dimensionless}*exp(-V/150.0{mV}));
    a2 = 9.178{mS_per_uF}*exp(V/29.68{mV})/4.5{dimensionless};
    a3 = 3.79329999999999996e-7{mS_per_uF}*exp(-V/7.6{mV})*3.0{dimensionless};
    a4 = a2/100.0{dimensionless}*1.5{dimensionless}*0.285{dimensionless};
    a5 = a2/95000.0{dimensionless}*80.0{dimensionless};
    b11 = 0.4{mS_per_uF}*exp(-V/20.3{mV});
    b12 = 0.4{mS_per_uF}*exp(-(V-5.0{mV})/20.3{mV});
    b13 = 0.4{mS_per_uF}*exp(-(V-10.0{mV})/20.3{mV})/4.5{dimensionless};
    b2 = a3*a2*a13/(b3*b13);
    b3 = 0.0084{mS_per_uF}+2e-5{per_mV_per_ms}*V;
    b4 = a3/5.0{dimensionless};
    b5 = a3/30.0{dimensionless}/10.0{dimensionless};
  enddef;

  def comp nav15 as
    var BC1: dimensionless {init: 2.08587473400000016e-08};
    var BC2: dimensionless {init: 1.63649800299999998e-06};
    var BC3: dimensionless {init: 5.17784203000000017e-05};
    var BO: dimensionless {init: 5.01137449999999989e-11};
    var C1: dimensionless {init: 2.47138734400000005e-04};
    var C2: dimensionless {init: 1.93896494799999999e-02};
    var C3: dimensionless {init: 6.13484026399999993e-01};
    var ENa: mV {pub: in};
    var GNa: mS_per_uF {init: 35.0};
    var IC2: dimensionless {init: 9.13117952200000020e-03};
    var IC3: dimensionless {init: 2.88855704800000002e-01};
    var IF: dimensionless {init: 1.17674846899999997e-04};
    var INa: A_per_F {pub: out};
    var IS1: dimensionless {init: 1.38841821899999998e-03};
    var IS2: dimensionless {init: 6.62152358299999966e-02};
    var O: dimensionless {init: 5.92094839499999983e-07};
    var V: mV {pub: in};
    var a11: mS_per_uF;
    var a12: mS_per_uF;
    var a13: mS_per_uF;
    var a2: mS_per_uF;
    var a3: mS_per_uF;
    var a4: mS_per_uF;
    var a5: mS_per_uF;
    var b11: mS_per_uF;
    var b12: mS_per_uF;
    var b13: mS_per_uF;
    var b2: mS_per_uF;
    var b3: mS_per_uF;
    var b4: mS_per_uF;
    var b5: mS_per_uF;
    var mu1: mS_per_uF {init: 4.3e-08};
    var mu2: mS_per_uF {init: 0.0003};
    var time: ms {pub: in};
    ode(BC1, time) = BO*b13+BC2*a12+C1*mu1-BC1*(a13+b12+mu2);
    ode(BC2, time) = BC1*b12+BC3*a11+C2*mu1-BC2*(a12+b11+mu2);
    ode(BC3, time) = BC2*b11+C3*mu1-BC3*(a11+mu2);
    ode(BO, time) = BC1*a13+O*mu1-BO*(b13+mu2);
    ode(C1, time) = IF*a3+BC1*mu2+O*b13+C2*a12-C1*(a13+b3+mu1+b12);
    ode(C2, time) = IC2*a3+BC2*mu2+C1*b12+C3*a11-C2*(a12+b3+mu1+b11);
    ode(C3, time) = IC3*a3+BC3*mu2+C2*b11-C3*(a11+b3+mu1);
    ode(IC2, time) = IF*b12+C2*b3+IC3*a11-IC2*(a12+a3+b11);
    ode(IC3, time) = IC2*b11+C3*b3-IC3*(a11+a3);
    ode(IF, time) = IS1*b4+O*a2+IC2*a12+C1*b3-IF*(a4+b2+b12+a3);
    INa = GNa*(O+BO)*(V-ENa);
    ode(IS1, time) = IS2*b5+IF*a4-IS1*(a5+b4);
    ode(IS2, time) = IS1*a5-IS2*b5;
    ode(O, time) = IF*b2+BO*mu2+C1*a13-O*(a2+b13+mu1);
    a11 = 3.802{mS_per_uF}/(0.1027{dimensionless}*exp(-V/17.0{mV})+0.2{dimensionless}*exp(-V/150.0{mV}));
    a12 = 3.802{mS_per_uF}/(0.1027{dimensionless}*exp(-V/15.0{mV})+0.23{dimensionless}*exp(-V/150.0{mV}));
    a13 = 3.802{mS_per_uF}/(0.1027{dimensionless}*exp(-V/12.0{mV})+0.25{dimensionless}*exp(-V/150.0{mV}));
    a2 = 9.178{mS_per_uF}*exp(V/29.68{mV});
    a3 = 3.79329999999999996e-7{mS_per_uF}*exp(-V/7.7{mV});
    a4 = a2/100.0{dimensionless};
    a5 = a2/95000.0{dimensionless};
    b11 = 0.1917{mS_per_uF}*exp(-V/20.3{mV});
    b12 = 0.2{mS_per_uF}*exp(-(V-5.0{mV})/20.3{mV});
    b13 = 0.22{mS_per_uF}*exp(-(V-10.0{mV})/20.3{mV});
    b2 = a3*a2*a13/(b3*b13);
    b3 = 0.0084{mS_per_uF}+2e-5{per_mV_per_ms}*V;
    b4 = a3;
    b5 = a3/50.0{dimensionless};
  enddef;

  def comp nernst as
    var EK: mV {pub: out};
    var ENa: mV {pub: out};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var RTF: mV {pub: in};
    EK = RTF*ln(Ko/Ki);
    ENa = RTF*ln(Nao/Nai);
  enddef;

  def comp phys as
    var F: C_per_mmol {pub: out, init: 96.5};
    var R: J_per_mol_per_K {init: 8.315};
    var RTF: mV {pub: out};
    var T: kelvin {init: 310.0};
    var V: mV {pub: in};
    var VFFRT: C_per_mmol {pub: out};
    var VFRT: dimensionless {pub: out};
    RTF = R*T/F;
    VFFRT = F*VFRT;
    VFRT = V/RTF;
  enddef;

  def comp potassium as
    var ICaK: A_per_F {pub: in};
    var IHCN: A_per_F {pub: in};
    var IK1: A_per_F {pub: in};
    var IK_tot: A_per_F;
    var IKr: A_per_F {pub: in};
    var IKs: A_per_F {pub: in};
    var INaK: A_per_F {pub: in};
    var Isus: A_per_F {pub: in};
    var Ito1: A_per_F {pub: in};
    var Ki: mM {pub: out, init: 1.22483450199999993e+02};
    var cell_a1: s3_A_mol_per_g_per_m5 {pub: in};
    var i_stim: A_per_F {pub: in};
    var time: ms {pub: in};
    IK_tot = IKr+IKs+IK1+ICaK+2.0{dimensionless}*IHCN/3.0{dimensionless}+Isus+i_stim-2.0{dimensionless}*INaK+Ito1;
    ode(Ki, time) = -cell_a1*IK_tot;
  enddef;

  def comp ryr as
    var C1: dimensionless {pub: out, init: 4.65590390899999984e-01};
    var C2: dimensionless {pub: out, init: 5.33775261499999987e-01};
    var CaJSR: mM {pub: in};
    var CaSS: mM {pub: in};
    var Jrel: mM_per_ms {pub: out};
    var O1: dimensionless {init: 6.34345983199999957e-04};
    var O2: dimensionless {pub: out, init: 2.58066283699999986e-09};
    var kaminus: mS_per_uF {init: 0.576};
    var kaplus: m12_per_s_per_mol4_times_1e15 {init: 0.01215};
    var kbminus: mS_per_uF {init: 1.93};
    var kbplus: m9_per_s_per_mol3_times_1e12 {init: 0.00405};
    var kcminus: mS_per_uF {init: 0.0008};
    var kcplus: mS_per_uF {init: 0.1};
    var ryr_C1_a2: mol4_per_m12_times_1e_minus_12;
    var ryr_O2_a1: mM3_times_1e_minus_9;
    var time: ms {pub: in};
    var v1: mS_per_uF {init: 1.8};
    ode(C1, time) = -kaplus*ryr_C1_a2*C1+kaminus*O1;
    ode(C2, time) = kcplus*O1-kcminus*C2;
    Jrel = v1*(O1+O2)*(CaJSR-CaSS);
    ode(O1, time) = -(ode(C1, time)+ode(O2, time)+ode(C2, time));
    ode(O2, time) = kbplus*ryr_O2_a1*O1-kbminus*O2;
    ryr_C1_a2 = pow(CaSS*1000.0{dimensionless_times_1e_minus_3}, 4.0{dimensionless});
    ryr_O2_a1 = pow(CaSS*1000.0{dimensionless_times_1e_minus_3}, 3.0{dimensionless});
  enddef;

  def comp serca as
    var CaNSR: mM {pub: in};
    var Cai: mM {pub: in};
    var Jup: mM_per_ms {pub: out};
    var KSR: dimensionless {init: 1.2};
    var Kfb: mM {init: 0.000168};
    var Krb: mM {init: 3.29};
    var Nfb: dimensionless {init: 1.2};
    var Nrb: dimensionless {init: 1.0};
    var fb: dimensionless;
    var rb: dimensionless;
    var vmaxf: mM_per_ms {init: 7.48e-05};
    var vmaxr: mM_per_ms {init: 0.000318};
    Jup = KSR*(vmaxf*fb-vmaxr*rb)/(1.0{dimensionless}+fb+rb);
    fb = pow(Cai/Kfb, Nfb);
    rb = pow(CaNSR/Krb, Nrb);
  enddef;

  def comp sodium as
    var IHCN: A_per_F {pub: in};
    var INa: A_per_F {pub: in};
    var INa1: A_per_F {pub: in};
    var INaCa: A_per_F {pub: in};
    var INaK: A_per_F {pub: in};
    var INa_tot: A_per_F;
    var Nai: mM {pub: out, init: 1.20687050500000002e+01};
    var cell_a1: s3_A_mol_per_g_per_m5 {pub: in};
    var time: ms {pub: in};
    INa_tot = INa+INa1+IHCN/3.0{dimensionless}+3.0{dimensionless}*(INaCa+INaK);
    ode(Nai, time) = -cell_a1*INa_tot;
  enddef;
  def map between caflux and calcium for
    vars CaJSR and CaJSR;
    vars CaNSR and CaNSR;
    vars CaSS and CaSS;
    vars Cai and Cai;
    vars Jtr and Jtr;
    vars Jtrpn and Jtrpn;
    vars Jxfer and Jxfer;
  enddef;
  def map between caflux and engine for
    vars HTRPNCa and HTRPNCa;
    vars LTRPNCa and LTRPNCa;
    vars time and time;
  enddef;
  def map between calcium and cell for
    vars VJSR and VJSR;
    vars VNSR and VNSR;
    vars VSS and VSS;
    vars Vmyo and Vmyo;
    vars cell_a1 and a1;
    vars cell_a2 and a2;
  enddef;
  def map between calcium and engine for
    vars time and time;
  enddef;
  def map between calcium and ical for
    vars CaSS and CaSS;
    vars ICa and ICa;
  enddef;
  def map between calcium and icat for
    vars icat_I and I;
  enddef;
  def map between calcium and inaca for
    vars Cai and Cai;
    vars INaCa and INaCa;
  enddef;
  def map between calcium and ipca for
    vars Cai and Cai;
    vars IpCa and IpCa;
  enddef;
  def map between calcium and ryr for
    vars CaJSR and CaJSR;
    vars CaSS and CaSS;
    vars Jrel and Jrel;
  enddef;
  def map between calcium and serca for
    vars CaNSR and CaNSR;
    vars Cai and Cai;
    vars Jup and Jup;
  enddef;
  def map between cell and phys for
    vars F and F;
  enddef;
  def map between cell and potassium for
    vars a1 and cell_a1;
  enddef;
  def map between cell and sodium for
    vars a1 and cell_a1;
  enddef;
  def map between engine and ical for
    vars time and time;
  enddef;
  def map between engine and icat for
    vars time and time;
  enddef;
  def map between engine and ihcn for
    vars time and time;
  enddef;
  def map between engine and ikr for
    vars time and time;
  enddef;
  def map between engine and iks for
    vars time and time;
  enddef;
  def map between engine and ito for
    vars time and time;
  enddef;
  def map between engine and membrane for
    vars time and time;
  enddef;
  def map between engine and nav11 for
    vars time and time;
  enddef;
  def map between engine and nav15 for
    vars time and time;
  enddef;
  def map between engine and potassium for
    vars time and time;
  enddef;
  def map between engine and ryr for
    vars O2 and O2;
    vars ryr_C1 and C1;
    vars ryr_C2 and C2;
    vars time and time;
  enddef;
  def map between engine and sodium for
    vars time and time;
  enddef;
  def map between extra and ical for
    vars Cao and Cao;
    vars Ko and Ko;
  enddef;
  def map between extra and ik1 for
    vars Ko and Ko;
  enddef;
  def map between extra and ikr for
    vars Ko and Ko;
  enddef;
  def map between extra and inaca for
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between extra and inak for
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between extra and nernst for
    vars Ko and Ko;
    vars Nao and Nao;
  enddef;
  def map between ical and icat for
    vars ICamax and ICamax;
    vars PCa and PCa;
  enddef;
  def map between ical and membrane for
    vars ICa and ICa;
    vars ICaK and ICaK;
    vars V and V;
  enddef;
  def map between ical and phys for
    vars VFFRT and VFFRT;
    vars VFRT and VFRT;
  enddef;
  def map between ical and potassium for
    vars ICaK and ICaK;
    vars Ki and Ki;
  enddef;
  def map between icat and membrane for
    vars I and icat_I;
    vars V and V;
  enddef;
  def map between ihcn and membrane for
    vars IHCN and IHCN;
    vars V and V;
  enddef;
  def map between ihcn and nernst for
    vars EK and EK;
    vars ENa and ENa;
  enddef;
  def map between ihcn and phys for
    vars VFRT and VFRT;
  enddef;
  def map between ihcn and potassium for
    vars IHCN and IHCN;
  enddef;
  def map between ihcn and sodium for
    vars IHCN and IHCN;
  enddef;
  def map between ik1 and membrane for
    vars IK1 and IK1;
    vars V and V;
  enddef;
  def map between ik1 and nernst for
    vars EK and EK;
  enddef;
  def map between ik1 and potassium for
    vars IK1 and IK1;
  enddef;
  def map between ikr and membrane for
    vars IKr and IKr;
    vars V and V;
  enddef;
  def map between ikr and nernst for
    vars EK and EK;
  enddef;
  def map between ikr and potassium for
    vars IKr and IKr;
  enddef;
  def map between iks and membrane for
    vars IKs and IKs;
    vars V and V;
  enddef;
  def map between iks and nernst for
    vars EK and EK;
  enddef;
  def map between iks and potassium for
    vars IKs and IKs;
  enddef;
  def map between inaca and membrane for
    vars INaCa and INaCa;
  enddef;
  def map between inaca and phys for
    vars VFRT and VFRT;
  enddef;
  def map between inaca and sodium for
    vars INaCa and INaCa;
    vars Nai and Nai;
  enddef;
  def map between inak and membrane for
    vars INaK and INaK;
  enddef;
  def map between inak and phys for
    vars VFRT and VFRT;
  enddef;
  def map between inak and potassium for
    vars INaK and INaK;
  enddef;
  def map between inak and sodium for
    vars INaK and INaK;
    vars Nai and Nai;
  enddef;
  def map between ipca and membrane for
    vars IpCa and IpCa;
  enddef;
  def map between isus and membrane for
    vars Isus and Isus;
    vars V and V;
  enddef;
  def map between isus and nernst for
    vars EK and EK;
  enddef;
  def map between isus and potassium for
    vars Isus and Isus;
  enddef;
  def map between ito and membrane for
    vars Ito1 and Ito1;
    vars V and V;
  enddef;
  def map between ito and nernst for
    vars EK and EK;
  enddef;
  def map between ito and potassium for
    vars Ito1 and Ito1;
  enddef;
  def map between membrane and nav11 for
    vars INa1 and INa1;
    vars V and V;
  enddef;
  def map between membrane and nav15 for
    vars INa and INa;
    vars V and V;
  enddef;
  def map between membrane and phys for
    vars V and V;
  enddef;
  def map between membrane and potassium for
    vars i_stim and i_stim;
  enddef;
  def map between nav11 and nernst for
    vars ENa and ENa;
  enddef;
  def map between nav11 and sodium for
    vars INa1 and INa1;
  enddef;
  def map between nav15 and nernst for
    vars ENa and ENa;
  enddef;
  def map between nav15 and sodium for
    vars INa and INa;
  enddef;
  def map between nernst and phys for
    vars RTF and RTF;
  enddef;
  def map between nernst and potassium for
    vars Ki and Ki;
  enddef;
  def map between nernst and sodium for
    vars Nai and Nai;
  enddef;
enddef;
