// creator: Orgunit Auckland Bioengineering Institute; Orgname The University of Auckland; c.lloyd@auckland.ac.nz; Family Lloyd; Other May; Given Catherine
// created: W3CDTF 2009-03-02T00:00:00+00:00
// comment: FN Catherine Lloyd; This CellML model is known to run in PCEnv and COR to recreate the published results. The units have been checked and are consistent.
// simulation: maximumStepSize 0.1; endingValue 120; pointDensity 10000
// reference: Pubmed_id 18408122; title Mathematical model of the neonatal mouse ventricular action potential; title American Journal of Physiology Heart and Circulatory Physiology; Family Wang; Other J; Given Linda; Family Sobie; Other A; Given Eric; last_page H2575; volume 294; W3CDTF 2008-04-11 00:00; first_page H2565
// reference: subject_type keyword; _1 electrophysiology; _2 calcium dynamics; _3 myocyte; _4 mouse; _5 myocardium
def model wang_model_2008 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit micromolar_per_millisecond as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_micromolar_millisecond as
    unit micromolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar3_per_millisecond as
    unit micromolar {expo: -3};
    unit millisecond {expo: -1};
  enddef;
  def unit micromolar4_per_millisecond as
    unit micromolar {expo: -4};
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit millivolt2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit per_picoF as
    unit picoF {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit cm2_per_microF as
    unit metre {expo: 2, pref: centi};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -80.6475, pub: out};
    var Cm: microF_per_cm2 {init: 1, pub: out};
    var Vmyo: microlitre {init: 2.2826e-6, pub: out};
    var VJSR: microlitre {init: 0.12e-8, pub: out};
    var VNSR: microlitre {init: 2.098e-7, pub: out};
    var Vss: microlitre {init: 3.0734e-8, pub: out};
    var Acap: cm2 {init: 1.5410e-5, pub: out};
    var Ko: micromolar {init: 5400, pub: out};
    var Nao: micromolar {init: 140000, pub: out};
    var Cao: micromolar {init: 1000, pub: out};
    var Clo: micromolar {init: 132000, pub: out};
    var Cli: micromolar {init: 30000, pub: out};
    var R: joule_per_mole_kelvin {init: 8.314, pub: out};
    var T: kelvin {init: 298, pub: out};
    var F: coulomb_per_millimole {init: 96.5, pub: out};
    var i_stim: picoA_per_picoF;
    var stim_start: millisecond {init: 20};
    var stim_end: millisecond {init: 500000};
    var stim_period: millisecond {init: 2000.0};
    var stim_duration: millisecond {init: 0.5};
    var stim_amplitude: picoA_per_picoF {init: -80};
    var time: millisecond {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_CaT: picoA_per_picoF {pub: in};
    var i_pCa: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_Cab: picoA_per_picoF {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_Nab: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Kto_f: picoA_per_picoF {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_Kur: picoA_per_picoF {pub: in};
    var i_Kss: picoA_per_picoF {pub: in};
    var i_ClCa: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    i_stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA_per_picoF};
    endsel;
    ode(V, time) = -(i_CaL+i_CaT+i_pCa+i_NaCa+i_Cab+i_Na+i_Nab+i_NaK+i_Kto_f+i_K1+i_Ks+i_Kur+i_Kss+i_Kr+i_ClCa+i_stim);
  enddef;

  def comp calcium_concentration as
    var Cai: micromolar {init: 0.2049, pub: out};
    var Cass: micromolar {init: 0.1867, pub: out};
    var CaJSR: micromolar {init: 705.5417, pub: out};
    var CaNSR: micromolar {init: 703.3063, pub: out};
    var Bi: dimensionless;
    var Bss: dimensionless;
    var BJSR: dimensionless;
    var CMDN_tot: micromolar {init: 25};
    var CSQN_tot: micromolar {init: 15000};
    var Km_CMDN: micromolar {init: 0.238};
    var Km_CSQN: micromolar {init: 800};
    var Acap: cm2 {pub: in};
    var Vmyo: microlitre {pub: in};
    var VJSR: microlitre {pub: in};
    var Vss: microlitre {pub: in};
    var VNSR: microlitre {pub: in};
    var V: millivolt {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_Cab: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_CaT: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_pCa: picoA_per_picoF {pub: in};
    var J_leak: micromolar_per_millisecond {pub: in};
    var J_rel: micromolar_per_millisecond {pub: in};
    var J_up: micromolar_per_millisecond {pub: in};
    var J_tr: micromolar_per_millisecond {pub: in};
    var J_trpn: micromolar_per_millisecond {pub: in};
    var J_xfer: micromolar_per_millisecond {pub: in};
    ode(Cai, time) = Bi*(J_leak+J_xfer-(J_up+J_trpn));
    ode(Cass, time) = Bss*(J_rel*VJSR/Vss-(J_xfer*Vmyo/Vss+(i_CaL+i_Cab+i_pCa+i_CaT-2{dimensionless}*i_NaCa)*Acap*Cm/(2{dimensionless}*Vss*F)));
    ode(CaJSR, time) = BJSR*(J_xfer-J_rel);
    ode(CaNSR, time) = (J_up-J_leak)*Vmyo/VNSR-J_tr*VJSR/VNSR;
    Bi = pow(1{dimensionless}+CMDN_tot*Km_CMDN/sqr(Km_CMDN+Cai), -1{dimensionless});
    Bss = pow(1{dimensionless}+CMDN_tot*Km_CMDN/sqr(Km_CMDN+Cass), -1{dimensionless});
    BJSR = pow(1{dimensionless}+CSQN_tot*Km_CSQN/sqr(Km_CSQN+CaJSR), -1{dimensionless});
  enddef;

  def comp calcium_fluxes as
    var J_leak: micromolar_per_millisecond {pub: out};
    var J_rel: micromolar_per_millisecond {pub: out};
    var J_up: micromolar_per_millisecond {pub: out};
    var J_tr: micromolar_per_millisecond {pub: out};
    var J_trpn: micromolar_per_millisecond {pub: out};
    var J_xfer: micromolar_per_millisecond {pub: out};
    var k_plus_htrpn: per_micromolar_millisecond {init: 0.00237, pub: out};
    var k_minus_htrpn: per_millisecond {init: 3.2e-5, pub: out};
    var k_plus_ltrpn: per_micromolar_millisecond {init: 0.0327, pub: out};
    var k_minus_ltrpn: per_millisecond {init: 0.0196, pub: out};
    var P_RyR: dimensionless {init: 2.8603e-14};
    var v1: per_millisecond {init: 0.45};
    var tau_tr: millisecond {init: 20};
    var v2: per_millisecond {init: 2.088e-5};
    var tau_xfer: millisecond {init: 8};
    var v3: micromolar_per_millisecond {init: 0.09};
    var Km_up: micromolar {init: 0.5};
    var LTRPN_tot: micromolar {pub: in};
    var HTRPN_tot: micromolar {pub: in};
    var LTRPN_Ca: micromolar {pub: in};
    var HTRPN_Ca: micromolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var i_CaL_max: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var Cai: micromolar {pub: in};
    var Cass: micromolar {pub: in};
    var CaJSR: micromolar {pub: in};
    var CaNSR: micromolar {pub: in};
    var P_O1: dimensionless {pub: in};
    var P_O2: dimensionless {pub: in};
    J_rel = v1*(P_O1+P_O2)*(CaJSR-Cass)*P_RyR;
    J_tr = (CaNSR-CaJSR)/tau_tr;
    J_xfer = (Cass-Cai)/tau_xfer;
    J_leak = v2*(CaNSR-Cai);
    J_up = v3*sqr(Cai)/(sqr(Km_up)+sqr(Cai));
    J_trpn = k_plus_htrpn*Cai*(HTRPN_tot-HTRPN_Ca)+k_plus_ltrpn*Cai*(LTRPN_tot-LTRPN_Ca)-(k_minus_htrpn*HTRPN_Ca+k_minus_ltrpn*LTRPN_Ca);
    ode(P_RyR, time) = -0.04{per_millisecond}*P_RyR-0.1{per_millisecond}*i_CaL/i_CaL_max*exp(-sqr(V-5{millivolt})/648{millivolt2});
  enddef;

  def comp calcium_buffering as
    var LTRPN_tot: micromolar {init: 35, pub: out};
    var HTRPN_tot: micromolar {init: 70, pub: out};
    var LTRPN_Ca: micromolar {init: 8.9220, pub: out};
    var HTRPN_Ca: micromolar {init: 66.0407, pub: out};
    var time: millisecond {pub: in};
    var Cai: micromolar {pub: in};
    var k_plus_htrpn: per_micromolar_millisecond {pub: in};
    var k_minus_htrpn: per_millisecond {pub: in};
    var k_plus_ltrpn: per_micromolar_millisecond {pub: in};
    var k_minus_ltrpn: per_millisecond {pub: in};
    ode(LTRPN_Ca, time) = k_plus_ltrpn*Cai*(LTRPN_tot-LTRPN_Ca)-k_minus_ltrpn*LTRPN_Ca;
    ode(HTRPN_Ca, time) = k_plus_htrpn*Cai*(HTRPN_tot-HTRPN_Ca)-k_minus_htrpn*HTRPN_Ca;
  enddef;

  def comp ryanodine_receptors as
    var P_O1: dimensionless {init: 1.1e-3, pub: out};
    var P_O2: dimensionless {init: 2.9799e-8, pub: out};
    var P_C1: dimensionless {pub: out};
    var P_C2: dimensionless {init: 0.1003, pub: out};
    var k_plus_a: micromolar4_per_millisecond {init: 0.00608};
    var k_minus_a: per_millisecond {init: 0.07125};
    var k_plus_b: micromolar3_per_millisecond {init: 0.00405};
    var k_minus_b: per_millisecond {init: 0.965};
    var k_plus_c: per_millisecond {init: 0.009};
    var k_minus_c: per_millisecond {init: 0.0008};
    var m: dimensionless {init: 3};
    var n: dimensionless {init: 4};
    var time: millisecond {pub: in};
    var Cass: micromolar {pub: in};
    ode(P_O1, time) = k_plus_a*pow(Cass, n)*P_C1+k_minus_b*P_O2+k_minus_c*P_C2-(k_minus_a*P_O1+k_plus_b*pow(Cass, m)*P_O1+k_plus_c*P_O1);
    P_C1 = 1{dimensionless}-(P_C2+P_O1+P_O2);
    ode(P_O2, time) = k_plus_b*pow(Cass, m)*P_O1-k_minus_b*P_O2;
    ode(P_C2, time) = k_plus_c*P_O1-k_minus_c*P_C2;
  enddef;

  def comp L_type_calcium_current as
    var i_CaL: picoA_per_picoF {pub: out};
    var i_CaL_max: picoA_per_picoF {init: 7, pub: out};
    var E_CaL: millivolt {init: 63, pub: out};
    var g_CaL: milliS_per_microF {init: 0.19019};
    var O: dimensionless {init: 4.4776e-12};
    var C1: dimensionless;
    var C2: dimensionless {init: 1.6996e-4};
    var C3: dimensionless {init: 1.1754e-8};
    var C4: dimensionless {init: 6.1239e-10};
    var I1: dimensionless {init: 1.5450e-9};
    var I2: dimensionless {init: 6.4226e-8};
    var I3: dimensionless {init: 6.5201e-7};
    var alpha: per_millisecond;
    var beta: per_millisecond;
    var gamma: per_millisecond;
    var Kpcf: per_millisecond;
    var Kpcb: per_millisecond {init: 0.0005};
    var Kpc_max: per_millisecond {init: 0.23324};
    var Kpc_half: micromolar {init: 20};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var Cass: micromolar {pub: in};
    i_CaL = g_CaL*O*(V-E_CaL);
    ode(O, time) = alpha*C4+Kpcb*I1+0.001{dimensionless}*(alpha*I2-Kpcf*O)-(4{dimensionless}*beta*O+gamma*O);
    C1 = 1{dimensionless}-(O+C2+C3+C4+I1+I2+I3);
    ode(C2, time) = 4{dimensionless}*alpha*C1+2{dimensionless}*beta*C3-(beta*C2+3{dimensionless}*alpha*C2);
    ode(C3, time) = 3{dimensionless}*alpha*C2+3{dimensionless}*beta*C4-(2{dimensionless}*beta*C3+2{dimensionless}*alpha*C3);
    ode(C4, time) = 2{dimensionless}*alpha*C3+4{dimensionless}*beta*O+0.01{millisecond}*(4{dimensionless}*Kpcb*beta*I1-alpha*gamma*C4)+0.002{dimensionless}*(4{dimensionless}*beta*I2-Kpcf*C4)+4{millisecond}*beta*Kpcb*I3-(3{dimensionless}*beta*C4+alpha*C4+1{millisecond}*gamma*Kpcf*C4);
    ode(I1, time) = gamma*O+0.001{dimensionless}*(alpha*I3-Kpcf*I1)+0.01{millisecond}*(alpha*gamma*C4-4{dimensionless}*beta*Kpcf*I1)-Kpcb*I1;
    ode(I2, time) = 0.001{dimensionless}*(Kpcf*O-alpha*I2)+Kpcb*I3+0.002{dimensionless}*(Kpcf*C4-4{dimensionless}*beta*I2)-gamma*I2;
    ode(I3, time) = 0.001{dimensionless}*(Kpcf*I1-alpha*I3)+gamma*I2+1{millisecond}*gamma*Kpcf*C4-(4{millisecond}*beta*Kpcb*I3+Kpcb*I3);
    alpha = 0.4{per_millisecond}*exp((V+12{millivolt})/10{millivolt})*(1{dimensionless}+0.7{dimensionless}*exp(-sqr(V+40{millivolt})/10{millivolt2})-0.75{dimensionless}*exp(-sqr(V+20{millivolt})/400{millivolt2}))/(1{dimensionless}+0.12{dimensionless}*exp((V+12{millivolt})/10{millivolt}));
    beta = 0.05{per_millisecond}*exp(-(V+12{millivolt})/13{millivolt});
    gamma = Kpc_max*Cass/(Kpc_half+Cass);
    Kpcf = 13{per_millisecond}*(1{dimensionless}-exp(-sqr(V+14.5{millivolt})/100{millivolt2}));
  enddef;

  def comp T_type_calcium_current as
    var i_CaT: picoA_per_picoF {pub: out};
    var E_CaT: millivolt {init: 50};
    var g_CaT: milliS_per_microF {init: 0.055};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var b: dimensionless {priv: in};
    var g: dimensionless {priv: in};
    i_CaT = g_CaT*b*g*(V-E_CaT);
  enddef;

  def comp T_type_calcium_current_b_gate as
    var b: dimensionless {init: 0.0047, pub: out};
    var b_infinity: dimensionless;
    var tau_b: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    b_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+48{millivolt})/6.1{millivolt}));
    tau_b = 0.1{millisecond}+5.4{millisecond}/(1{dimensionless}+exp((V+100{millivolt})/6.6{millivolt}));
    ode(b, time) = (b_infinity-b)/tau_b;
  enddef;

  def comp T_type_calcium_current_g_gate as
    var g: dimensionless {init: 0.9020, pub: out};
    var g_infinity: dimensionless;
    var tau_g: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    g_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+66{millivolt})/6.6{millivolt}));
    tau_g = 8{millisecond}+32{millisecond}/(1{dimensionless}+exp((V+65{millivolt})/5{millivolt}));
    ode(g, time) = (g_infinity-g)/tau_g;
  enddef;

  def comp calcium_pump_current as
    var i_pCa: picoA_per_picoF {pub: out};
    var i_pCa_max: picoA_per_picoF {init: 0.2};
    var Km_pCa: micromolar {init: 0.5};
    var Cai: micromolar {pub: in};
    i_pCa = i_pCa_max*sqr(Cai)/(sqr(Km_pCa)+sqr(Cai));
  enddef;

  def comp sodium_calcium_exchange_current as
    var i_NaCa: picoA_per_picoF {pub: out};
    var k_NaCa: picoA_per_picoF {init: 907.68};
    var K_mNa: micromolar {init: 87500};
    var K_mCa: micromolar {init: 1380};
    var k_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    i_NaCa = k_NaCa*1{dimensionless}/(pow(K_mNa, 3{dimensionless})+pow(Nao, 3{dimensionless}))*1{dimensionless}/(K_mCa+Cao)*1{dimensionless}/(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*V*F/(R*T)))*(exp(eta*V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Nao, 3{dimensionless})*Cai);
  enddef;

  def comp calcium_background_current as
    var i_Cab: picoA_per_picoF {pub: out};
    var g_Cab: milliS_per_microF {init: 0.00025};
    var E_CaN: millivolt;
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    i_Cab = g_Cab*(V-E_CaN);
    E_CaN = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
  enddef;

  def comp sodium_concentration as
    var Nai: micromolar {init: 2.1747e4, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vmyo: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var Acap: cm2 {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Nab: picoA_per_picoF {pub: in};
    ode(Nai, time) = -(i_Na+i_Nab+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp fast_sodium_current as
    var i_Na: picoA_per_picoF {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: milliS_per_microF {init: 10};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nao: micromolar {pub: in};
    var Nai: micromolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0032, pub: out};
    var alpha_m: per_millisecond;
    var beta_m: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millivolt_millisecond}*(V+47.13{millivolt})/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11{millivolt});
    ode(m, time) = alpha_m-(alpha_m+beta_m)*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.9606, pub: out};
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_millisecond}*exp((80{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_millisecond}*exp(0.079{per_millivolt}*V)+310000{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1{per_millisecond}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    ode(h, time) = alpha_h-(alpha_h+beta_h)*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 0.9744, pub: out};
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        -(127140{per_millivolt_millisecond}*exp(0.2444{per_millivolt}*V)+3.474e-5{per_millivolt_millisecond}*exp(-0.04391{per_millivolt}*V))*(V+37.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-2.535e-7{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    ode(j, time) = alpha_j-(alpha_j+beta_j)*j;
  enddef;

  def comp sodium_background_current as
    var i_Nab: picoA_per_picoF {pub: out};
    var g_Nab: milliS_per_microF {init: 0.0026};
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_Nab = g_Nab*(V-E_Na);
  enddef;

  def comp potassium_concentration as
    var Ki: micromolar {init: 1.3645e5, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Vmyo: microlitre {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var Acap: cm2 {pub: in};
    var i_Kto_f: picoA_per_picoF {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_Kss: picoA_per_picoF {pub: in};
    var i_Kur: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    ode(Ki, time) = -(i_Kto_f+i_K1+i_Ks+i_Kss+i_Kur+i_Kr-2{dimensionless}*i_NaK)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp fast_transient_outward_potassium_current as
    var i_Kto_f: picoA_per_picoF {pub: out};
    var E_K: millivolt {pub: out};
    var g_Kto_f: milliS_per_microF {init: 0.1017};
    var ato_f: dimensionless {init: 0.0032};
    var ito_f: dimensionless {init: 0.7530};
    var ito_f_infinity: dimensionless;
    var tau_ito_f: millisecond;
    var alpha_a: per_millisecond;
    var beta_a: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Ki: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var time: millisecond {pub: in};
    i_Kto_f = g_Kto_f*pow(ato_f, 6.5{dimensionless})*ito_f*(V-E_K);
    E_K = R*T/F*ln(Ko/Ki);
    ode(ato_f, time) = alpha_a*(1{dimensionless}-ato_f)-beta_a*ato_f;
    ode(ito_f, time) = (ito_f_infinity-ito_f)/tau_ito_f;
    ito_f_infinity = alpha_i/(alpha_i+beta_i);
    tau_ito_f = 1{millisecond}/(0.000152{dimensionless}*exp(-(V+13.5{millivolt})/7{millivolt})/(0.067083{dimensionless}*exp(-(V+33.5{millivolt})/7{millivolt})+1{dimensionless})+0.00095{dimensionless}*exp((V+33.5{millivolt})/7{millivolt})/(0.051335{dimensionless}*exp((V+33.5{millivolt})/7{millivolt})+1{dimensionless}));
    alpha_a = 0.18064{per_millisecond}*exp(0.03577{per_millivolt}*(V+30{millivolt}));
    beta_a = 0.3956{per_millisecond}*exp(-0.06237{per_millivolt}*(V+30{millivolt}));
    alpha_i = 0.000152{per_millisecond}*exp(-(V-3.81{millivolt})/15.75{millivolt})/(0.0067083{dimensionless}*exp(-(V+132.05{millivolt})/15.75{millivolt})+1{dimensionless});
    beta_i = 0.00095{per_millisecond}*exp((V+132.05{millivolt})/15.75{millivolt})/(0.051335{dimensionless}*exp((V+132.05{millivolt})/15.75{millivolt})+1{dimensionless});
  enddef;

  def comp ultra_rapidly_activating_delayed_rectifier_potassium_current as
    var i_Kur: picoA_per_picoF {pub: out};
    var ass: dimensionless {pub: out};
    var g_Kur: milliS_per_microF {init: 0.0048};
    var aur: dimensionless {init: 5.2471e-4};
    var iur: dimensionless {init: 0.9866};
    var tau_aur: millisecond;
    var tau_iur: millisecond;
    var iss: dimensionless;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_Kur = g_Kur*aur*iur*(V-E_K);
    ode(aur, time) = (ass-aur)/tau_aur;
    ode(iur, time) = (iss-iur)/tau_iur;
    ass = 1{dimensionless}/(1{dimensionless}+exp(-(V+22.5{millivolt})/7.7{millivolt}));
    tau_aur = 0.493{millisecond}*exp(-0.0629{per_millivolt}*V)+2.058{millisecond};
    iss = 1{dimensionless}/(1{dimensionless}+exp((V+45.2{millivolt})/5.7{millivolt}));
    tau_iur = 1200{millisecond}-170{millisecond}/(1{dimensionless}+exp((V+45.2{millivolt})/5.7{millivolt}));
  enddef;

  def comp non_inactivating_steady_state_potassium_current as
    var i_Kss: picoA_per_picoF {pub: out};
    var g_Kss: milliS_per_microF {init: 0.015};
    var aKss: dimensionless {init: 0.8500};
    var tau_Kss: millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var ass: dimensionless {pub: in};
    i_Kss = g_Kss*aKss*(V-E_K);
    ode(aKss, time) = (ass-aKss)/tau_Kss;
    tau_Kss = 39.3{millisecond}*exp(-0.0862{per_millivolt}*V)+13.17{millisecond};
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: picoA_per_picoF {pub: out};
    var g_K1: milliS_per_microF {init: 0.235};
    var Ko: micromolar {pub: in};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_K1 = g_K1*Ko/(Ko+210{micromolar})*(V-E_K)/(1{dimensionless}+exp(0.0896{per_millivolt}*(V-E_K)));
  enddef;

  def comp slow_delayed_rectifier_potassium_current as
    var i_Ks: picoA_per_picoF {pub: out};
    var g_Ks: milliS_per_microF {init: 0.046};
    var nKs: dimensionless {init: 0.0026};
    var alpha_n: per_millisecond;
    var beta_n: per_millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_Ks = g_Ks*sqr(nKs)*(V-E_K);
    ode(nKs, time) = alpha_n*(1{dimensionless}-nKs)-beta_n*nKs;
    alpha_n = 0.00000481333{per_millivolt_millisecond}*(V+26.5{millivolt})/(1{dimensionless}-exp(-0.128{per_millivolt}*(V+26.5{millivolt})));
    beta_n = 0.0000953333{per_millisecond}*exp(-0.038{per_millivolt}*(V+26.5{millivolt}));
  enddef;

  def comp rapid_delayed_rectifier_potassium_current as
    var i_Kr: picoA_per_picoF {pub: out};
    var g_Kr: milliS_per_microF {init: 01.17};
    var O_K: dimensionless {init: 2.1e-3};
    var C_K1: dimensionless {init: 1.1e-3};
    var C_K2: dimensionless {init: 8.3641e-4};
    var C_K0: dimensionless;
    var I_K: dimensionless {init: 4.3522e-4};
    var alpha_a0: per_millisecond;
    var beta_a0: per_millisecond;
    var kb: per_millisecond {init: 0.036778};
    var kf: per_millisecond {init: 0.023761};
    var alpha_a1: per_millisecond;
    var beta_a1: per_millisecond;
    var alpha_i: per_millisecond;
    var beta_i: per_millisecond;
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    i_Kr = g_Kr*O_K*(V-E_K);
    C_K0 = 1{dimensionless}-(C_K1+C_K2+O_K+I_K);
    ode(C_K2, time) = kf*C_K1+beta_a1*O_K-(kb*C_K2+alpha_a1*C_K2);
    ode(C_K1, time) = alpha_a0*C_K0+kb*C_K2-(beta_a0*C_K1+kf*C_K1);
    ode(O_K, time) = alpha_a1*C_K2+beta_i*I_K-(beta_a1*O_K+alpha_i*O_K);
    ode(I_K, time) = alpha_i*O_K-beta_i*I_K;
    alpha_a0 = 0.022348{per_millisecond}*exp(0.01176{per_millivolt}*V);
    beta_a0 = 0.047002{per_millisecond}*exp(-0.0631{per_millivolt}*V);
    alpha_a1 = 0.013733{per_millisecond}*exp(0.038198{per_millivolt}*V);
    beta_a1 = 0.0000689{per_millisecond}*exp(-0.04178{per_millivolt}*V);
    alpha_i = 0.090821{per_millisecond}*exp(0.023391{per_millivolt}*(V+5{millivolt}));
    beta_i = 0.006497{per_millisecond}*exp(-0.03268{per_millivolt}*(V+5{millivolt}));
  enddef;

  def comp sodium_potassium_pump_current as
    var i_NaK: picoA_per_picoF {pub: out};
    var i_NaK_max: picoA_per_picoF {init: 0.88};
    var Km_Nai: micromolar {init: 21000};
    var Km_Ko: micromolar {init: 1500};
    var f_NaK: dimensionless;
    var sigma: dimensionless;
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    i_NaK = i_NaK_max*f_NaK*1{dimensionless}/(1{dimensionless}+pow(Km_Nai/Nai, 1.5{dimensionless}))*Ko/(Ko+Km_Ko);
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67300{micromolar})-1{dimensionless});
  enddef;

  def comp calcium_activated_chloride_current as
    var i_ClCa: picoA_per_picoF {pub: out};
    var P_ClCa: cm_per_second {init: 2.74e-7};
    var f_ClCa: dimensionless;
    var Km_Cl: micromolar {init: 4};
    var n_ClCa: dimensionless {init: 3};
    var V: millivolt {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cli: micromolar {pub: in};
    var Clo: micromolar {pub: in};
    var Cass: micromolar {pub: in};
    f_ClCa = pow(Cass/(Km_Cl+Cass), n_ClCa);
    i_ClCa = 1{cm2_per_microF}*P_ClCa*f_ClCa*V*sqr(F)/(R*T)*(Clo*exp(V*F/(R*T))-Cli)/(exp(V*F/(R*T))-1{dimensionless});
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp T_type_calcium_current incl
      comp T_type_calcium_current_b_gate;
      comp T_type_calcium_current_g_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes and environment for
    vars time and time;
  enddef;
  def map between calcium_buffering and environment for
    vars time and time;
  enddef;
  def map between ryanodine_receptors and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between T_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between fast_transient_outward_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between ultra_rapidly_activating_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between non_inactivating_steady_state_potassium_current and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between membrane and L_type_calcium_current for
    vars i_CaL and i_CaL;
    vars V and V;
  enddef;
  def map between membrane and T_type_calcium_current for
    vars i_CaT and i_CaT;
    vars V and V;
  enddef;
  def map between membrane and calcium_pump_current for
    vars i_pCa and i_pCa;
  enddef;
  def map between membrane and sodium_calcium_exchange_current for
    vars i_NaCa and i_NaCa;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between membrane and calcium_background_current for
    vars i_Cab and i_Cab;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
  enddef;
  def map between membrane and fast_sodium_current for
    vars i_Na and i_Na;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Nao and Nao;
  enddef;
  def map between membrane and sodium_background_current for
    vars i_Nab and i_Nab;
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Nao and Nao;
    vars Ko and Ko;
  enddef;
  def map between membrane and fast_transient_outward_potassium_current for
    vars i_Kto_f and i_Kto_f;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ko and Ko;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars i_K1 and i_K1;
    vars V and V;
    vars Ko and Ko;
  enddef;
  def map between membrane and slow_delayed_rectifier_potassium_current for
    vars i_Ks and i_Ks;
    vars V and V;
  enddef;
  def map between membrane and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars i_Kur and i_Kur;
    vars V and V;
  enddef;
  def map between membrane and non_inactivating_steady_state_potassium_current for
    vars i_Kss and i_Kss;
    vars V and V;
  enddef;
  def map between membrane and rapid_delayed_rectifier_potassium_current for
    vars i_Kr and i_Kr;
    vars V and V;
  enddef;
  def map between membrane and calcium_activated_chloride_current for
    vars i_ClCa and i_ClCa;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Clo and Clo;
    vars Cli and Cli;
  enddef;
  def map between membrane and calcium_concentration for
    vars Cm and Cm;
    vars V and V;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars VNSR and VNSR;
    vars VJSR and VJSR;
    vars Vss and Vss;
    vars F and F;
  enddef;
  def map between membrane and calcium_fluxes for
    vars V and V;
  enddef;
  def map between membrane and sodium_concentration for
    vars Cm and Cm;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars F and F;
  enddef;
  def map between membrane and potassium_concentration for
    vars Cm and Cm;
    vars Acap and Acap;
    vars Vmyo and Vmyo;
    vars F and F;
  enddef;
  def map between calcium_concentration and calcium_fluxes for
    vars Cass and Cass;
    vars CaJSR and CaJSR;
    vars Cai and Cai;
    vars CaNSR and CaNSR;
    vars J_rel and J_rel;
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
    vars J_leak and J_leak;
    vars J_up and J_up;
    vars J_trpn and J_trpn;
  enddef;
  def map between calcium_concentration and calcium_buffering for
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and ryanodine_receptors for
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and L_type_calcium_current for
    vars i_CaL and i_CaL;
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and T_type_calcium_current for
    vars i_CaT and i_CaT;
  enddef;
  def map between calcium_concentration and calcium_pump_current for
    vars i_pCa and i_pCa;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and sodium_calcium_exchange_current for
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and calcium_background_current for
    vars i_Cab and i_Cab;
    vars Cai and Cai;
  enddef;
  def map between calcium_concentration and calcium_activated_chloride_current for
    vars Cass and Cass;
  enddef;
  def map between calcium_fluxes and calcium_buffering for
    vars LTRPN_tot and LTRPN_tot;
    vars HTRPN_tot and HTRPN_tot;
    vars LTRPN_Ca and LTRPN_Ca;
    vars HTRPN_Ca and HTRPN_Ca;
    vars k_plus_htrpn and k_plus_htrpn;
    vars k_minus_htrpn and k_minus_htrpn;
    vars k_plus_ltrpn and k_plus_ltrpn;
    vars k_minus_ltrpn and k_minus_ltrpn;
  enddef;
  def map between calcium_fluxes and L_type_calcium_current for
    vars i_CaL_max and i_CaL_max;
    vars i_CaL and i_CaL;
  enddef;
  def map between calcium_fluxes and ryanodine_receptors for
    vars P_O1 and P_O1;
    vars P_O2 and P_O2;
  enddef;
  def map between sodium_concentration and fast_sodium_current for
    vars Nai and Nai;
    vars i_Na and i_Na;
  enddef;
  def map between sodium_concentration and sodium_background_current for
    vars i_Nab and i_Nab;
  enddef;
  def map between sodium_concentration and sodium_calcium_exchange_current for
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sodium_concentration and sodium_potassium_pump_current for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between potassium_concentration and fast_transient_outward_potassium_current for
    vars Ki and Ki;
    vars i_Kto_f and i_Kto_f;
  enddef;
  def map between potassium_concentration and time_independent_potassium_current for
    vars i_K1 and i_K1;
  enddef;
  def map between potassium_concentration and slow_delayed_rectifier_potassium_current for
    vars i_Ks and i_Ks;
  enddef;
  def map between potassium_concentration and rapid_delayed_rectifier_potassium_current for
    vars i_Kr and i_Kr;
  enddef;
  def map between potassium_concentration and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars i_Kur and i_Kur;
  enddef;
  def map between potassium_concentration and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
  enddef;
  def map between ultra_rapidly_activating_delayed_rectifier_potassium_current and non_inactivating_steady_state_potassium_current for
    vars ass and ass;
  enddef;
  def map between potassium_concentration and non_inactivating_steady_state_potassium_current for
    vars i_Kss and i_Kss;
  enddef;
  def map between fast_transient_outward_potassium_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and slow_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and ultra_rapidly_activating_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and non_inactivating_steady_state_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_potassium_current and rapid_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_b_gate for
    vars b and b;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_g_gate for
    vars g and g;
    vars time and time;
    vars V and V;
  enddef;
  // Mathematical model of the neonatal mouse ventricular action potential
  //
  // Catherine Lloyd
  //
  // ABI
  //
  // Model Status
  //
  // This CellML model is known to run in OpenCell and COR to recreate the published results. The units have been checked and are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: Therapies for heart disease are based largely on our understanding of the adult myocardium. The dramatic differences in action potential (AP) shape between neonatal and adult cardiac myocytes, however, indicate that a different set of molecular interactions in neonatal myocytes necessitates different treatment for newborns. Computational modeling is useful for synthesizing data to determine how interactions between components lead to systems-level behavior, but this technique has not been used extensively to study neonatal heart cell function. We created a mathematical model of the neonatal (day 1) mouse myocyte by modifying, on the basis of experimental data, the densities and/or formulations of ion transport mechanisms in an adult cell model. The new model reproduces the characteristic AP shape of neonatal cells, with a brief plateau phase and longer duration than the adult (action potential duration at 80% repolarization = 60.1 vs. 12.6 ms). The simulation results are consistent with experimental data, including 1) decreased density and altered inactivation of transient outward K+ currents, 2) increased delayed rectifier K+ currents, 3) Ca2+ entry through T-type as well as L-type Ca2+ channels, 4) increased Ca2+ influx through Na+/Ca2+ exchange, and 5) Ca2+ transients resulting from transmembrane Ca2+ entry rather than release from the sarcoplasmic reticulum (SR). Simulations performed with the model generated novel predictions, including increased SR Ca2+ leak and elevated intracellular Na+ concentration in neonatal compared with adult myocytes. This new model can therefore be used for testing hypotheses and obtaining a better quantitative understanding of differences between neonatal and adult physiology.
  //
  // The original paper reference is cited below:
  //
  // Mathematical model of the neonatal mouse ventricular action potential, Linda J. Wang and Eric A. Sobie, 2008,American Journal of Physiology: Heart and Circulatory Physiology, 294, H2565-H2575. PubMed ID: 18408122 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=18408122&amp;dopt=Abstract)
  //
  // cell diagram
  //
  // Schematic diagram of the neonatal mouse model.
enddef;
