// This CellML file was generated on 21/05/2008 at 15:15:33 using:
//
// COR (0.9.31.955)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// creator: Family Noble; Given Penny; Orgname University of Oxford; penny.noble@dpag.ox.ac.uk
// title: Alternans and spiral breakup in a human ventricular tissue model (Endocardial Model)
// comment: The 2006 model is based on earlier ten Tusscher models, and incorporates recent experimental restitution data, an improved description of intracellular calcium dynamics - including subspace calcium dynamics which control L-type calcium current and calcium-induced calcium release (CICR,) by means of modelling CICR with a four-state Markov model for the ryanodine receptor - and incorporation of both fast and slow voltage-gated inactivation of the L-type calcium current. This is the ENDOCARDIAL CELL VARIANT of the model. This model was created by Penny Noble of Oxford University and is known to read in COR and PCEnv.; FN Penny Noble
// created: W3CDTF 2008-05-14T00:00:00+00:00
// modification: Added simulation metadata to allow simulation for 5 seconds. Changed model cmeta:id to remove version number.; W3CDTF 2008-06-19T11:14:49+12:00; Family Lawson; Given James; Other Richard
// reference: Pubmed_id 16565318; Family ten Tusscher; Given KH; Family Panfilov; Given AV; title Alternans and spiral breakup in a human ventricular tissue model.; volume 291; first_page 1088; title American Journal of Physiology; W3CDTF 2006-09-00 00:00; last_page 1100
// reference: _1 spiral breakup; _2 ventricular myocyte; _3 cardiac electrophysiology; _4 electrophysiology; _5 cardiac; _6 alternans; subject_type keyword
// simulation: endingValue 1000; maximumStepSize 0.1; pointDensity 10000
def model tentusscher_panfilov_2006_endo_cell as
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt_square as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit nanoS_per_picoF as
    unit siemens {pref: nano};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoF as
    unit ampere {pref: pico};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit nanoA_per_millimolar as
    unit ampere {pref: nano};
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimolar2_per_millisecond as
    unit millimolar {expo: -2};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit microF;
    unit cm2 {expo: -1};
  enddef;
  def unit litre_per_farad_second as
    unit litre;
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -86.709, pub: out};
    var R: joule_per_mole_kelvin {init: 8.314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_millimole {init: 96.485, pub: out};
    var Cm: picoF {init: 185, pub: out};
    var V_c: micrometre3 {init: 16404, pub: out};
    var time: millisecond {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_to: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_b_Na: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_b_Ca: picoA_per_picoF {pub: in};
    var i_p_K: picoA_per_picoF {pub: in};
    var i_p_Ca: picoA_per_picoF {pub: in};
    var i_Stim: picoA_per_picoF {pub: out};
    var stim_start: millisecond {init: 10};
    var stim_period: millisecond {init: 1000};
    var stim_duration: millisecond {init: 1};
    var stim_amplitude: picoA_per_picoF {init: -52};
    i_Stim = sel
      case (time-floor(time/stim_period)*stim_period >= stim_start) and (time-floor(time/stim_period)*stim_period <= stim_start+stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA_per_picoF};
    endsel;
    ode(V, time) = -(i_K1+i_to+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_b_Na+i_NaCa+i_b_Ca+i_p_K+i_p_Ca+i_Stim);
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var P_kna: dimensionless {init: 0.03};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
  enddef;

  def comp inward_rectifier_potassium_current as
    var i_K1: picoA_per_picoF {pub: out};
    var g_K1: nanoS_per_picoF {init: 5.405};
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xK1_inf: dimensionless;
    var alpha_K1: dimensionless;
    var beta_K1: dimensionless;
    alpha_K1 = 0.1{dimensionless}/(1{dimensionless}+exp(0.06{per_millivolt}*(V-E_K-200{millivolt})));
    beta_K1 = (3{dimensionless}*exp(0.0002{per_millivolt}*(V-E_K+100{millivolt}))+exp(0.1{per_millivolt}*(V-E_K-10{millivolt})))/(1{dimensionless}+exp(-0.5{per_millivolt}*(V-E_K)));
    xK1_inf = alpha_K1/(alpha_K1+beta_K1);
    i_K1 = g_K1*xK1_inf*sqrt(K_o/5.4{millimolar})*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current as
    var i_Kr: picoA_per_picoF {pub: out};
    var g_Kr: nanoS_per_picoF {init: 0.153};
    var E_K: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Xr1: dimensionless {priv: in};
    var Xr2: dimensionless {priv: in};
    i_Kr = g_Kr*sqrt(K_o/5.4{millimolar})*Xr1*Xr2*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr1_gate as
    var Xr1: dimensionless {init: 0.00448, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xr1_inf: dimensionless;
    var alpha_xr1: dimensionless;
    var beta_xr1: dimensionless;
    var tau_xr1: millisecond;
    xr1_inf = 1{dimensionless}/(1{dimensionless}+exp((-26{millivolt}-V)/7{millivolt}));
    alpha_xr1 = 450{dimensionless}/(1{dimensionless}+exp((-45{millivolt}-V)/10{millivolt}));
    beta_xr1 = 6{dimensionless}/(1{dimensionless}+exp((V+30{millivolt})/11.5{millivolt}));
    tau_xr1 = 1{millisecond}*alpha_xr1*beta_xr1;
    ode(Xr1, time) = (xr1_inf-Xr1)/tau_xr1;
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr2_gate as
    var Xr2: dimensionless {init: 0.476, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xr2_inf: dimensionless;
    var alpha_xr2: dimensionless;
    var beta_xr2: dimensionless;
    var tau_xr2: millisecond;
    xr2_inf = 1{dimensionless}/(1{dimensionless}+exp((V+88{millivolt})/24{millivolt}));
    alpha_xr2 = 3{dimensionless}/(1{dimensionless}+exp((-60{millivolt}-V)/20{millivolt}));
    beta_xr2 = 1.12{dimensionless}/(1{dimensionless}+exp((V-60{millivolt})/20{millivolt}));
    tau_xr2 = 1{millisecond}*alpha_xr2*beta_xr2;
    ode(Xr2, time) = (xr2_inf-Xr2)/tau_xr2;
  enddef;

  def comp slow_time_dependent_potassium_current as
    var i_Ks: picoA_per_picoF {pub: out};
    var g_Ks: nanoS_per_picoF {init: 0.392};
    var E_Ks: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Xs: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp slow_time_dependent_potassium_current_Xs_gate as
    var Xs: dimensionless {init: 0.0087, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xs_inf: dimensionless;
    var alpha_xs: dimensionless;
    var beta_xs: dimensionless;
    var tau_xs: millisecond;
    xs_inf = 1{dimensionless}/(1{dimensionless}+exp((-5{millivolt}-V)/14{millivolt}));
    alpha_xs = 1400{dimensionless}/sqrt(1{dimensionless}+exp((5{millivolt}-V)/6{millivolt}));
    beta_xs = 1{dimensionless}/(1{dimensionless}+exp((V-35{millivolt})/15{millivolt}));
    tau_xs = 1{millisecond}*alpha_xs*beta_xs+80{millisecond};
    ode(Xs, time) = (xs_inf-Xs)/tau_xs;
  enddef;

  def comp fast_sodium_current as
    var i_Na: picoA_per_picoF {pub: out};
    var g_Na: nanoS_per_picoF {init: 14.838};
    var E_Na: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.00155, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var m_inf: dimensionless;
    var alpha_m: dimensionless;
    var beta_m: dimensionless;
    var tau_m: millisecond;
    m_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((-56.86{millivolt}-V)/9.03{millivolt}));
    alpha_m = 1{dimensionless}/(1{dimensionless}+exp((-60{millivolt}-V)/5{millivolt}));
    beta_m = 0.1{dimensionless}/(1{dimensionless}+exp((V+35{millivolt})/5{millivolt}))+0.1{dimensionless}/(1{dimensionless}+exp((V-50{millivolt})/200{millivolt}));
    tau_m = 1{millisecond}*alpha_m*beta_m;
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.7573, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var h_inf: dimensionless;
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var tau_h: millisecond;
    h_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((V+71.55{millivolt})/7.43{millivolt}));
    alpha_h = sel
      case V < -40{millivolt}:
        0.057{per_millisecond}*exp(-(V+80{millivolt})/6.8{millivolt});
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        2.7{per_millisecond}*exp(0.079{per_millivolt}*V)+310000{per_millisecond}*exp(0.3485{per_millivolt}*V);
      otherwise:
        0.77{per_millisecond}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 0.7225, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var j_inf: dimensionless;
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var tau_j: millisecond;
    j_inf = 1{dimensionless}/sqr(1{dimensionless}+exp((V+71.55{millivolt})/7.43{millivolt}));
    alpha_j = sel
      case V < -40{millivolt}:
        (-25428{per_millisecond}*exp(0.2444{per_millivolt}*V)-6.948e-6{per_millisecond}*exp(-0.04391{per_millivolt}*V))*(V+37.78{millivolt})/1{millivolt}/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.02424{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.6{per_millisecond}*exp(0.057{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp sodium_background_current as
    var i_b_Na: picoA_per_picoF {pub: out};
    var g_bna: nanoS_per_picoF {init: 0.00029};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp L_type_Ca_current as
    var i_CaL: picoA_per_picoF {pub: out};
    var g_CaL: litre_per_farad_second {init: 0.0398};
    var Ca_o: millimolar {pub: in};
    var Ca_ss: millimolar {priv: out, pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d: dimensionless {priv: in, pub: out};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var fCass: dimensionless {priv: in};
    i_CaL = g_CaL*d*f*f2*fCass*4{dimensionless}*(V-15{millivolt})*sqr(F)/(R*T)*(0.25{dimensionless}*Ca_ss*exp(2{dimensionless}*(V-15{millivolt})*F/(R*T))-Ca_o)/(exp(2{dimensionless}*(V-15{millivolt})*F/(R*T))-1{dimensionless});
  enddef;

  def comp L_type_Ca_current_d_gate as
    var d: dimensionless {init: 3.164e-5, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var d_inf: dimensionless;
    var alpha_d: dimensionless;
    var beta_d: dimensionless;
    var gamma_d: millisecond;
    var tau_d: millisecond;
    d_inf = 1{dimensionless}/(1{dimensionless}+exp((-8{millivolt}-V)/7.5{millivolt}));
    alpha_d = 1.4{dimensionless}/(1{dimensionless}+exp((-35{millivolt}-V)/13{millivolt}))+0.25{dimensionless};
    beta_d = 1.4{dimensionless}/(1{dimensionless}+exp((V+5{millivolt})/5{millivolt}));
    gamma_d = 1{millisecond}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_d = 1{millisecond}*alpha_d*beta_d+gamma_d;
    ode(d, time) = (d_inf-d)/tau_d;
  enddef;

  def comp L_type_Ca_current_f_gate as
    var f: dimensionless {init: 0.8009, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f_inf: dimensionless;
    var tau_f: millisecond;
    f_inf = 1{dimensionless}/(1{dimensionless}+exp((V+20{millivolt})/7{millivolt}));
    tau_f = 1102.5{millisecond}*exp(-sqr(V+27{millivolt})/225{millivolt_square})+200{millisecond}/(1{dimensionless}+exp((13{millivolt}-V)/10{millivolt}))+180{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt}))+20{millisecond};
    ode(f, time) = (f_inf-f)/tau_f;
  enddef;

  def comp L_type_Ca_current_f2_gate as
    var f2: dimensionless {init: 0.9778, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var f2_inf: dimensionless;
    var tau_f2: millisecond;
    f2_inf = 0.67{dimensionless}/(1{dimensionless}+exp((V+35{millivolt})/7{millivolt}))+0.33{dimensionless};
    tau_f2 = 562{millisecond}*exp(-sqr(V+27{millivolt})/240{millivolt_square})+31{millisecond}/(1{dimensionless}+exp((25{millivolt}-V)/10{millivolt}))+80{millisecond}/(1{dimensionless}+exp((V+30{millivolt})/10{millivolt}));
    ode(f2, time) = (f2_inf-f2)/tau_f2;
  enddef;

  def comp L_type_Ca_current_fCass_gate as
    var fCass: dimensionless {init: 0.9953, pub: out};
    var Ca_ss: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var fCass_inf: dimensionless;
    var tau_fCass: millisecond;
    fCass_inf = 0.6{dimensionless}/(1{dimensionless}+sqr(Ca_ss/0.05{millimolar}))+0.4{dimensionless};
    tau_fCass = 80{millisecond}/(1{dimensionless}+sqr(Ca_ss/0.05{millimolar}))+2{millisecond};
    ode(fCass, time) = (fCass_inf-fCass)/tau_fCass;
  enddef;

  def comp calcium_background_current as
    var i_b_Ca: picoA_per_picoF {pub: out};
    var g_bca: nanoS_per_picoF {init: 0.000592};
    var E_Ca: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp transient_outward_current as
    var i_to: picoA_per_picoF {pub: out};
    var g_to: nanoS_per_picoF {init: 0.073};
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: millisecond {priv: out, pub: in};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*r*s*(V-E_K);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {init: 0.3212, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var s_inf: dimensionless;
    var tau_s: millisecond;
    s_inf = 1{dimensionless}/(1{dimensionless}+exp((V+28{millivolt})/5{millivolt}));
    tau_s = 1000{millisecond}*exp(-sqr(V+67{millivolt})/1000{millivolt_square})+8{millisecond};
    ode(s, time) = (s_inf-s)/tau_s;
  enddef;

  def comp transient_outward_current_r_gate as
    var r: dimensionless {init: 2.235e-8, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var r_inf: dimensionless;
    var tau_r: millisecond;
    r_inf = 1{dimensionless}/(1{dimensionless}+exp((20{millivolt}-V)/6{millivolt}));
    tau_r = 9.5{millisecond}*exp(-sqr(V+40{millivolt})/1800{millivolt_square})+0.8{millisecond};
    ode(r, time) = (r_inf-r)/tau_r;
  enddef;

  def comp sodium_potassium_pump_current as
    var i_NaK: picoA_per_picoF {pub: out};
    var P_NaK: picoA_per_picoF {init: 2.724};
    var K_mk: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: millisecond {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {priv: out, pub: in};
    i_NaK = P_NaK*K_o/(K_o+K_mk)*Na_i/(Na_i+K_mNa)/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T)));
  enddef;

  def comp sodium_calcium_exchanger_current as
    var i_NaCa: picoA_per_picoF {pub: out};
    var K_NaCa: picoA_per_picoF {init: 1000};
    var K_sat: dimensionless {init: 0.1};
    var alpha: dimensionless {init: 2.5};
    var gamma: dimensionless {init: 0.35};
    var Km_Ca: millimolar {init: 1.38};
    var Km_Nai: millimolar {init: 87.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaCa = K_NaCa*(exp(gamma*V*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i*alpha)/((pow(Km_Nai, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(Km_Ca+Ca_o)*(1{dimensionless}+K_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp calcium_pump_current as
    var i_p_Ca: picoA_per_picoF {pub: out};
    var g_pCa: picoA_per_picoF {init: 0.1238};
    var K_pCa: millimolar {init: 0.0005};
    var Ca_i: millimolar {pub: in};
    i_p_Ca = g_pCa*Ca_i/(Ca_i+K_pCa);
  enddef;

  def comp potassium_pump_current as
    var i_p_K: picoA_per_picoF {pub: out};
    var g_pK: nanoS_per_picoF {init: 0.0146};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    i_p_K = g_pK*(V-E_K)/(1{dimensionless}+exp((25{millivolt}-V)/5.98{millivolt}));
  enddef;

  def comp calcium_dynamics as
    var Ca_i: millimolar {init: 0.00013, pub: out};
    var Ca_o: millimolar {init: 2, pub: out};
    var Ca_SR: millimolar {init: 3.715};
    var Ca_ss: millimolar {init: 0.00036, pub: out};
    var i_rel: millimolar_per_millisecond;
    var i_up: millimolar_per_millisecond;
    var i_leak: millimolar_per_millisecond;
    var i_xfer: millimolar_per_millisecond;
    var O: dimensionless;
    var R_prime: dimensionless {init: 0.9068};
    var k1: per_millimolar2_per_millisecond;
    var k2: per_millimolar_per_millisecond;
    var k1_prime: per_millimolar2_per_millisecond {init: 0.15};
    var k2_prime: per_millimolar_per_millisecond {init: 0.045};
    var k3: per_millisecond {init: 0.06};
    var k4: per_millisecond {init: 0.005};
    var EC: millimolar {init: 1.5};
    var max_sr: dimensionless {init: 2.5};
    var min_sr: dimensionless {init: 1};
    var kcasr: dimensionless;
    var V_rel: per_millisecond {init: 0.102};
    var V_xfer: per_millisecond {init: 0.0038};
    var K_up: millimolar {init: 0.00025};
    var V_leak: per_millisecond {init: 0.00036};
    var Vmax_up: millimolar_per_millisecond {init: 0.006375};
    var ddt_Ca_i_total: millimolar_per_millisecond;
    var ddt_Ca_sr_total: millimolar_per_millisecond;
    var ddt_Ca_ss_total: millimolar_per_millisecond;
    var f_JCa_i_free: dimensionless;
    var f_JCa_sr_free: dimensionless;
    var f_JCa_ss_free: dimensionless;
    var Buf_c: millimolar {init: 0.2};
    var K_buf_c: millimolar {init: 0.001};
    var Buf_sr: millimolar {init: 10};
    var K_buf_sr: millimolar {init: 0.3};
    var Buf_ss: millimolar {init: 0.4};
    var K_buf_ss: millimolar {init: 0.00025};
    var V_sr: micrometre3 {init: 1094};
    var V_ss: micrometre3 {init: 54.68};
    var V: millivolt {pub: in};
    var V_c: micrometre3 {pub: in};
    var time: millisecond {pub: in};
    var d: dimensionless {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cm: picoF {pub: in};
    var i_CaL: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_p_Ca: picoA_per_picoF {pub: in};
    var i_b_Ca: picoA_per_picoF {pub: in};
    i_rel = V_rel*O*(Ca_SR-Ca_ss);
    i_up = Vmax_up/(1{dimensionless}+sqr(K_up)/sqr(Ca_i));
    i_leak = V_leak*(Ca_SR-Ca_i);
    i_xfer = V_xfer*(Ca_ss-Ca_i);
    O = k1*sqr(Ca_ss)*R_prime/(k3+k1*sqr(Ca_ss));
    ode(R_prime, time) = -k2*Ca_ss*R_prime+k4*(1{dimensionless}-R_prime);
    k1 = k1_prime/kcasr;
    k2 = k2_prime*kcasr;
    kcasr = max_sr-(max_sr-min_sr)/(1{dimensionless}+sqr(EC/Ca_SR));
    ddt_Ca_i_total = -(i_b_Ca+i_p_Ca-2{dimensionless}*i_NaCa)*Cm/(2{dimensionless}*V_c*F)+(i_leak-i_up)*V_sr/V_c+i_xfer;
    ddt_Ca_sr_total = i_up-(i_rel+i_leak);
    ddt_Ca_ss_total = -i_CaL*Cm/(2{dimensionless}*V_ss*F)+i_rel*V_sr/V_ss-i_xfer*V_c/V_ss;
    f_JCa_i_free = 1{dimensionless}/(1{dimensionless}+Buf_c*K_buf_c/sqr(Ca_i+K_buf_c));
    f_JCa_sr_free = 1{dimensionless}/(1{dimensionless}+Buf_sr*K_buf_sr/sqr(Ca_SR+K_buf_sr));
    f_JCa_ss_free = 1{dimensionless}/(1{dimensionless}+Buf_ss*K_buf_ss/sqr(Ca_ss+K_buf_ss));
    ode(Ca_i, time) = ddt_Ca_i_total*f_JCa_i_free;
    ode(Ca_SR, time) = ddt_Ca_sr_total*f_JCa_sr_free;
    ode(Ca_ss, time) = ddt_Ca_ss_total*f_JCa_ss_free;
  enddef;

  def comp sodium_dynamics as
    var Na_i: millimolar {init: 10.355, pub: out};
    var Na_o: millimolar {init: 140, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cm: picoF {pub: in};
    var V_c: micrometre3 {pub: in};
    var i_Na: picoA_per_picoF {pub: in};
    var i_NaCa: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_b_Na: picoA_per_picoF {pub: in};
    ode(Na_i, time) = -(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(V_c*F)*Cm;
  enddef;

  def comp potassium_dynamics as
    var K_i: millimolar {init: 138.4, pub: out};
    var K_o: millimolar {init: 5.4, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cm: picoF {pub: in};
    var V_c: micrometre3 {pub: in};
    var i_K1: picoA_per_picoF {pub: in};
    var i_to: picoA_per_picoF {pub: in};
    var i_NaK: picoA_per_picoF {pub: in};
    var i_Kr: picoA_per_picoF {pub: in};
    var i_Ks: picoA_per_picoF {pub: in};
    var i_p_K: picoA_per_picoF {pub: in};
    var i_Stim: picoA_per_picoF {pub: in};
    ode(K_i, time) = -(i_K1+i_to+i_Kr+i_Ks+i_p_K+i_Stim-2{dimensionless}*i_NaK)/(V_c*F)*Cm;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_current incl
        comp L_type_Ca_current_d_gate;
        comp L_type_Ca_current_f_gate;
        comp L_type_Ca_current_f2_gate;
        comp L_type_Ca_current_fCass_gate;
      endcomp;
      comp inward_rectifier_potassium_current;
      comp rapid_time_dependent_potassium_current incl
        comp rapid_time_dependent_potassium_current_Xr1_gate;
        comp rapid_time_dependent_potassium_current_Xr2_gate;
      endcomp;
      comp slow_time_dependent_potassium_current incl
        comp slow_time_dependent_potassium_current_Xs_gate;
      endcomp;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_potassium_pump_current;
      comp sodium_calcium_exchanger_current;
      comp calcium_pump_current;
      comp potassium_pump_current;
      comp calcium_dynamics;
      comp sodium_dynamics;
      comp potassium_dynamics;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_current incl
      comp L_type_Ca_current_d_gate;
      comp L_type_Ca_current_f_gate;
      comp L_type_Ca_current_f2_gate;
      comp L_type_Ca_current_fCass_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_Xr1_gate;
      comp rapid_time_dependent_potassium_current_Xr2_gate;
    endcomp;
    comp slow_time_dependent_potassium_current incl
      comp slow_time_dependent_potassium_current_Xs_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump_current and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger_current and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between sodium_dynamics and environment for
    vars time and time;
  enddef;
  def map between potassium_dynamics and environment for
    vars time and time;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_current for
    vars V and V;
    vars i_CaL and i_CaL;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and inward_rectifier_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_calcium_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_pump_current for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and potassium_pump_current for
    vars V and V;
    vars i_p_K and i_p_K;
  enddef;
  def map between membrane and calcium_dynamics for
    vars V and V;
    vars F and F;
    vars V_c and V_c;
    vars Cm and Cm;
  enddef;
  def map between membrane and sodium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars Cm and Cm;
  enddef;
  def map between membrane and potassium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars Cm and Cm;
    vars i_Stim and i_Stim;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and inward_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and rapid_time_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and potassium_pump_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_time_dependent_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and calcium_dynamics for
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
  enddef;
  def map between reversal_potentials and potassium_dynamics for
    vars K_o and K_o;
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and sodium_dynamics for
    vars Na_o and Na_o;
    vars Na_i and Na_i;
  enddef;
  def map between inward_rectifier_potassium_current and potassium_dynamics for
    vars i_K1 and i_K1;
    vars K_o and K_o;
  enddef;
  def map between rapid_time_dependent_potassium_current and potassium_dynamics for
    vars i_Kr and i_Kr;
    vars K_o and K_o;
  enddef;
  def map between slow_time_dependent_potassium_current and potassium_dynamics for
    vars i_Ks and i_Ks;
  enddef;
  def map between fast_sodium_current and sodium_dynamics for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_background_current and sodium_dynamics for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between L_type_Ca_current and calcium_dynamics for
    vars Ca_o and Ca_o;
    vars Ca_ss and Ca_ss;
    vars d and d;
    vars i_CaL and i_CaL;
  enddef;
  def map between calcium_pump_current and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between sodium_potassium_pump_current and potassium_dynamics for
    vars i_NaK and i_NaK;
    vars K_o and K_o;
  enddef;
  def map between sodium_potassium_pump_current and sodium_dynamics for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger_current and calcium_dynamics for
    vars i_NaCa and i_NaCa;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
  enddef;
  def map between sodium_calcium_exchanger_current and sodium_dynamics for
    vars i_NaCa and i_NaCa;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr1_gate for
    vars Xr1 and Xr1;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr2_gate for
    vars Xr2 and Xr2;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_fCass_gate for
    vars fCass and fCass;
    vars time and time;
    vars Ca_ss and Ca_ss;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and potassium_dynamics for
    vars i_to and i_to;
  enddef;
  def map between potassium_pump_current and potassium_dynamics for
    vars i_p_K and i_p_K;
  enddef;
  // Alternans and spiral breakup in a human ventricular tissue model
  //
  // Noble Penny
  //
  // Oxford University Cardiac Electrophysiology Group
  //
  // Model Status
  //
  // This is the ENDOCARDIAL CELL VARIANT of the model. This model was created by Penny Noble of Oxford University and is known to read in COR and PCEnv. A stimulus protocol has been added that allows the model to simulate multiple action potentials at 1Hz.
  //
  // Model Structure
  //
  // ABSTRACT: Ventricular fibrillation (VF) is one of the main causes of death in the Western world. According to one hypothesis, the chaotic excitation dynamics during VF are the result of dynamical instabilities in action potential duration (APD) the occurrence of which requires that the slope of the APD restitution curve exceeds 1. Other factors such as electrotonic coupling and cardiac memory also determine whether these instabilities can develop. In this paper we study the conditions for alternans and spiral breakup in human cardiac tissue. Therefore, we develop a new version of our human ventricular cell model, which is based on recent experimental measurements of human APD restitution and includes a more extensive description of intracellular calcium dynamics. We apply this model to study the conditions for electrical instability in single cells, for reentrant waves in a ring of cells, and for reentry in two-dimensional sheets of ventricular tissue. We show that an important determinant for the onset of instability is the recovery dynamics of the fast sodium current. Slower sodium current recovery leads to longer periods of spiral wave rotation and more gradual conduction velocity restitution, both of which suppress restitution-mediated instability. As a result, maximum restitution slopes considerably exceeding 1 (up to 1.5) may be necessary for electrical instability to occur. Although slopes necessary for the onset of instabilities found in our study exceed 1, they are within the range of experimentally measured slopes. Therefore, we conclude that steep APD restitution-mediated instability is a potential mechanism for VF in the human heart.
  //
  // The original paper reference is cited below:
  //
  // Alternans and spiral breakup in a human ventricular tissue model, K.H.W.J. ten Tusscher, A.V. Panfilov, Sep 2006, American Journal of Physiology, Heart and Circulatory Physiology, 291 3, H1088-1100. PubMed ID: 16565318 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=16565318&dopt=Abstract)
  //
  // cell diagram
  //
  // A schematic diagram describing the ion movement across the cell surface membrane and the sarcoplasmic reticulum, which are described by the Ten Tusscher et al. 2006 mathematical model of the human ventricular myocyte.
enddef;
// rdf:#b2744ae0-0d1e-4feb-8f9d-fe8e3e0c5fd8
// FN: Penny Noble
// rdf:#1a8c2080-33d3-4edf-a044-4122095fa684
// Family: Noble
// Given: Penny
// rdf:#284f2f8e-b412-40b5-aede-4fa9ce58f991
// W3CDTF: 2008-05-14T00:37:55+12:00
// rdf:#c7a47c77-239c-4162-8e5f-c43518a48204
// value: Corrections to model name and stimulus current to enable running in COR.
// rdf:#338195e8-75fa-40a0-91bb-633409561903
// value: The 2006 model is based on earlier ten Tusscher models, and incorporates recent experimental restitution data, an improved description of intracellular calcium dynamics - including subspace calcium dynamics which control L-type calcium current and calcium-induced calcium release (CICR,) by means of modelling CICR with a four-state Markov model for the ryanodine receptor - and incorporation of both fast and slow voltage-gated inactivation of the L-type calcium current. This is the ENDOCARDIAL CELL VARIANT of the model. This model was created by Penny Noble of Oxford University and is known to read in COR and PCEnv.
