def model My_Model as
  def import using "unit.cellml" for
    unit ms using unit ms;
    unit per_ms using unit per_ms;
    unit mV using unit mV;
    unit mM using unit mM;
    unit mM3 using unit mM3;
    unit J_per_mol_per_kelvin using unit J_per_mol_per_kelvin;
    unit C_per_mol using unit C_per_mol;
    unit nS_per_pF using unit nS_per_pF;
    unit pA_per_pF using unit pA_per_pF;
    unit mV_ms using unit mV_ms;
    unit mM_per_ms using unit mM_per_ms;
    unit per_mM_per_ms using unit per_mM_per_ms;
    unit per_mM2_per_ms using unit per_mM2_per_ms;
  enddef;
  def import using "parameter.cellml" for
    comp parameter using comp parameter;
  enddef;
  def import using "parameter_Ik1.cellml" for
    comp parameter_Ik1 using comp parameter_Ik1;
  enddef;
  def import using "gating_Ik1.cellml" for
    comp gating_Ik1 using comp gating_Ik1;
  enddef;
  def import using "parameter_Ikr.cellml" for
    comp parameter_Ikr using comp parameter_Ikr;
  enddef;
  def import using "gating_Ikr.cellml" for
    comp gating_Ikr using comp gating_Ikr;
  enddef;
  def import using "parameter_Iks.cellml" for
    comp parameter_Iks using comp parameter_Iks;
  enddef;
  def import using "gating_Iks.cellml" for
    comp gating_Iks using comp gating_Iks;
  enddef;
  def import using "parameter_Ito.cellml" for
    comp parameter_Ito using comp parameter_Ito;
  enddef;
  def import using "gating_Ito.cellml" for
    comp gating_Ito using comp gating_Ito;
  enddef;
  def import using "parameter_Ica.cellml" for
    comp parameter_Ica using comp parameter_Ica;
  enddef;
  def import using "gating_Ica.cellml" for
    comp gating_Ica using comp gating_Ica;
  enddef;
  def import using "gating_Icat.cellml" for
    comp gating_Icat using comp gating_Icat;
  enddef;
  def import using "parameter_Ina.cellml" for
    comp parameter_Ina using comp parameter_Ina;
  enddef;
  def import using "gating_Ina.cellml" for
    comp gating_Ina using comp gating_Ina;
  enddef;
  def import using "parameter_If.cellml" for
    comp parameter_If using comp parameter_If;
  enddef;
  def import using "gating_If.cellml" for
    comp gating_If using comp gating_If;
  enddef;

  def comp main as
    var v: mV {pub: in};
    var R: J_per_mol_per_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mol {pub: in};
    var Cm: dimensionless {pub: in};
    var E_K: mV {pub: out};
    var Ki: mM {init: 150, pub: out};
    var x_inf_act_Ik1: dimensionless {pub: in};
    var Ko: mM {pub: in};
    var i_k1: pA_per_pF {pub: out};
    var g_k1: nS_per_pF {pub: out};
    var var_1: nS_per_pF {pub: in};
    var x_inf_act: dimensionless {pub: in};
    var x_inf_inact: dimensionless {pub: in};
    var X_kr_act: dimensionless {init: 0, pub: out};
    var X_kr_inact: dimensionless {init: 0, pub: out};
    var Xr1_1: dimensionless {pub: in};
    var Xr1_2: dimensionless {pub: in};
    var Xr1_5: dimensionless {pub: in};
    var Xr1_6: dimensionless {pub: in};
    var Xr2_1: dimensionless {pub: in};
    var Xr2_2: dimensionless {pub: in};
    var Xr2_5: dimensionless {pub: in};
    var Xr2_6: dimensionless {pub: in};
    var Xr1_7: dimensionless {pub: in};
    var Xr2_7: dimensionless {pub: in};
    var g_Kr: nS_per_pF {pub: out};
    var i_Kr: pA_per_pF {pub: out};
    var Xr1_0: nS_per_pF {pub: in};
    var tau_kr_act: ms {pub: in};
    var tau_kr_inact: ms {pub: in};
    var t: ms {init: 0, pub: out};
    var x_ks_inf_act: dimensionless {pub: in};
    var X_ks_act: dimensionless {init: 0, pub: out};
    var i_Ks: pA_per_pF {pub: out};
    var ks_0: nS_per_pF {priv: in, pub: out};
    var ks_1: dimensionless {priv: in, pub: out};
    var ks_2: dimensionless {priv: in, pub: out};
    var ks_5: dimensionless {priv: in, pub: out};
    var ks_6: dimensionless {priv: in, pub: out};
    var tau_ks_const: dimensionless {priv: in, pub: out};
    var g_Ks: nS_per_pF {pub: out};
    var tau_ks_act: ms {pub: in};
    var r_1: dimensionless {priv: in, pub: out};
    var r_2: dimensionless {priv: in, pub: out};
    var r_5: dimensionless {priv: in, pub: out};
    var r_6: dimensionless {priv: in, pub: out};
    var s_1: dimensionless {priv: in, pub: out};
    var s_2: dimensionless {priv: in, pub: out};
    var s_5: dimensionless {priv: in, pub: out};
    var s_6: dimensionless {priv: in, pub: out};
    var tau_r_const: dimensionless {pub: in};
    var tau_s_const: dimensionless {pub: in};
    var x_to_inf_act: dimensionless {priv: in, pub: out};
    var x_to_inf_inact: dimensionless {priv: in, pub: out};
    var X_to_act: dimensionless {init: 0, pub: out};
    var X_to_inact: dimensionless {init: 0, pub: out};
    var g_to: nS_per_pF {pub: out};
    var i_to: pA_per_pF {pub: out};
    var r_0: nS_per_pF {pub: in};
    var tau_to_act: ms {pub: in};
    var tau_to_inact: ms {pub: in};
    var x_ca_inf_act: dimensionless {pub: in};
    var x_ca_inf_inact: dimensionless {pub: in};
    var x_fca_inf_inact: dimensionless {pub: in};
    var X_ca_act: dimensionless {init: 0, pub: out};
    var X_ca_inact: dimensionless {init: 0, pub: out};
    var X_fca_inact: dimensionless {init: 0, pub: out};
    var tau_fca: dimensionless {priv: in, pub: out};
    var p_CaL: nS_per_pF {pub: out};
    var d_0: nS_per_pF {pub: in};
    var d_1: dimensionless {pub: in};
    var d_2: dimensionless {pub: in};
    var d_5: dimensionless {pub: in};
    var d_6: dimensionless {pub: in};
    var f_1: dimensionless {pub: in};
    var f_2: dimensionless {pub: in};
    var f_5: dimensionless {pub: in};
    var f_6: dimensionless {pub: in};
    var tau_d_const: dimensionless {pub: in};
    var tau_f_const: dimensionless {pub: in};
    var p_CaL_shannonCa: nS_per_pF {init: 5.4e-4, pub: out};
    var p_CaL_shannonNa: nS_per_pF {init: 1.5e-8, pub: out};
    var p_CaL_shannonK: nS_per_pF {init: 2.7e-7, pub: out};
    var p_CaL_shannonTot: nS_per_pF {pub: out};
    var p_CaL_shannonCap: nS_per_pF {pub: out};
    var p_CaL_shannonNap: nS_per_pF {pub: out};
    var p_CaL_shannonKp: nS_per_pF {pub: out};
    var p_CaL_Ca: nS_per_pF {pub: out};
    var p_CaL_Na: nS_per_pF {pub: out};
    var p_CaL_K: nS_per_pF {pub: out};
    var ca_i: mM {init: 0.00022, pub: out};
    var ca_ligand: mM {init: 0.000, pub: out};
    var ibarca: pA_per_pF {pub: out};
    var i_CaL_Ca: pA_per_pF {pub: out};
    var Na_i: mM {init: 7.169281, pub: out};
    var ibarna: pA_per_pF {pub: out};
    var i_CaL_Na: pA_per_pF {pub: out};
    var Ki: mM {init: 150, pub: out};
    var ibark: pA_per_pF {pub: out};
    var i_CaL_K: pA_per_pF {pub: out};
    var i_CaL: pA_per_pF {pub: out};
    var k_fca: dimensionless {pub: out};
    var Cao: mM {priv: in, pub: out};
    var Nao: mM {priv: in, pub: out};
    var ca_SR: mM {init: 0.3350868, pub: out};
    k_fca = sel
      case (x_fca_inf_inact > X_fca_inact) and (v > -60{mv}):
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    var tau_ca_act: ms {pub: in};
    var tau_ca_inact: ms {pub: in};
    var x_cat_inf_act: dimensionless {pub: in};
    var x_cat_inf_inact: dimensionless {pub: in};
    var X_cat_act: dimensionless {init: 0, pub: out};
    var X_cat_inact: dimensionless {init: 0, pub: out};
    var g_cat: nS_per_pF {init: 0.185, pub: out};
    var i_cat: pA_per_pF {pub: out};
    var tau_cat_act: ms {pub: in};
    var tau_cat_inact: ms {pub: in};
    var E_Ca: mV {pub: out};
    var x_na_m_inf_act: dimensionless {pub: in};
    var x_na_h_inf_inact: dimensionless {pub: in};
    var x_na_j_inf_inact: dimensionless {pub: in};
    var X_na_m_act: dimensionless {init: 0, pub: out};
    var X_na_h_inact: dimensionless {init: 0, pub: out};
    var X_na_j_inact: dimensionless {init: 0, pub: out};
    var E_Na: mV {pub: out};
    var g_Na: nS_per_pF {pub: in};
    var m_1: dimensionless {pub: in};
    var m_2: dimensionless {pub: in};
    var m_5: dimensionless {pub: in};
    var m_6: dimensionless {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var h_5: dimensionless {pub: in};
    var h_6: dimensionless {pub: in};
    var j_1: dimensionless {pub: in};
    var j_2: dimensionless {pub: in};
    var tau_m_const: dimensionless {pub: in};
    var tau_h_const: dimensionless {pub: in};
    var tau_j_const: dimensionless {pub: in};
    var i_na: pA_per_pF {pub: out};
    var tau_na_m_act: ms {pub: in};
    var tau_na_h_inact: ms {pub: in};
    var tau_na_j_inact: ms {pub: in};
    var x_f_inf_act: dimensionless {pub: in};
    var X_f_act: dimensionless {init: 0, pub: out};
    var i_f: pA_per_pF {pub: out};
    var i_fNa: pA_per_pF {pub: out};
    var i_fK: pA_per_pF {pub: out};
    var xf_1: dimensionless {priv: in, pub: out};
    var xf_2: dimensionless {priv: in, pub: out};
    var xf_5: dimensionless {priv: in, pub: out};
    var xf_6: dimensionless {priv: in, pub: out};
    var xf_const: dimensionless {priv: in, pub: out};
    var g_f: nS_per_pF {priv: in, pub: out};
    var NatoK_ratio: dimensionless {init: 0.491, pub: out};
    var Na_frac: dimensionless {pub: out};
    var tau_f_act: ms {pub: in};
    var KmCa: mM {init: 1.38, pub: out};
    var KmNai: mM {init: 87.5, pub: out};
    var Ksat: mM {init: 0.1, pub: out};
    var gamma: dimensionless {init: 0.7, pub: out};
    var alpha: dimensionless {init: 2.75, pub: out};
    var kNaCa: pA_per_pF {init: 1100, pub: out};
    var i_naca: pA_per_pF {pub: out};
    var Km_Na: mM {init: 40, pub: out};
    var Km_K: mM {init: 1, pub: out};
    var PNaK: pA_per_pF {init: 2.476116, pub: out};
    var i_nak: pA_per_pF {pub: out};
    var Kup: dimensionless {init: 0.0001755, pub: out};
    var VmaxUp: dimensionless {init: 0.0001105, pub: out};
    var i_up: mM_per_ms {pub: out};
    var V_leak: per_ms {init: 0.0000016, pub: out};
    var j_leak: mM_per_ms {pub: out};
    var ks: per_ms {init: 12.5, pub: out};
    var koCa: per_mM2_per_ms {init: 643751.68, pub: out};
    var kiCa: per_mM_per_ms {init: 18.495, pub: out};
    var kom: per_ms {init: 0.21435, pub: out};
    var kim: per_ms {init: 0.0005571, pub: out};
    var ec50SR: dimensionless {init: 0.45, pub: out};
    var MaxSR: dimensionless {init: 15, pub: out};
    var MinSR: dimensionless {init: 1, pub: out};
    var kCaSR: dimensionless {pub: out};
    var koSRCa: dimensionless {pub: out};
    var kiSRCa: dimensionless {pub: out};
    var C: dimensionless {init: 0.0113120363, pub: out};
    var O: dimensionless {init: 1.650451053E-4, pub: out};
    var I: dimensionless {init: 0.0142153622, pub: out};
    var CI: dimensionless {pub: out};
    var Vc: mM3 {pub: in};
    var V_SR: mM3 {pub: in};
    var j_rel: mM_per_ms {pub: out};
    var i_b_Na: pA_per_pF {pub: out};
    var g_b_Na: nS_per_pF {init: 0.000435, pub: out};
    var i_b_Ca: pA_per_pF {pub: out};
    var g_b_Ca: nS_per_pF {init: 0.00036704, pub: out};
    var i_PCa: pA_per_pF {pub: out};
    var g_PCa: pA_per_pF {init: 0.2625, pub: out};
    var KPCa: mM {init: 0.0005, pub: out};
    var Buf_SR: mM {init: 12, pub: out};
    var Kbuf_SR: mM {init: 0.3, pub: out};
    var Ca_SR_bufSR: mM {pub: out};
    var Buf_C: mM {init: 0.06, pub: out};
    var Kbuf_C: mM {init: 0.0006, pub: out};
    var Cai_buf: mM {pub: out};
    var i_voltageclamp: pA_per_pF {pub: out};
    var i_stim: pA_per_pF {init: 0, pub: out};
    var R_clamp: dimensionless {init: 0.02, pub: out};
    var v_clamp: mV {pub: out};
    var stim_flag: dimensionless {init: 0, pub: out};
    var voltageclamp: dimensionless {init: 0, pub: out};
    var cyclelength: dimensionless {init: 800, pub: out};
    var i_stim_Amplitude: dimensionless {init: 3, pub: out};
    var i_stim_End: dimensionless {init: 10e3, pub: out};
    var i_stim_PulseDuration: dimensionless {init: 5, pub: out};
    var i_stim_Start: dimensionless {init: 0, pub: out};
    v_clamp = v;
    E_K = R*T/F*ln(Ko/Ki);
    g_k1 = var_1;
    i_k1 = g_k1*sqrt(Ko/5.4{mM})*x_inf_act_Ik1*(v-E_K);
    ode(X_kr_act, t) = (x_inf_act-X_kr_act)/tau_kr_act;
    ode(X_kr_inact, t) = (x_inf_inact-X_kr_inact)/tau_kr_inact;
    g_Kr = Xr1_0;
    i_Kr = g_Kr*sqrt(Ko/5.4{dimensionless})*X_kr_act*X_kr_inact*(v-E_K);
    ode(X_ks_act, t) = (x_ks_inf_act-X_ks_act)/tau_ks_act;
    g_Ks = ks_0;
    i_Ks = g_Ks*sqr(X_ks_act)*(v-E_K);
    ode(X_to_act, t) = (x_to_inf_act-X_to_act)/tau_to_act;
    ode(X_to_inact, t) = (x_to_inf_inact-X_to_inact)/tau_to_inact;
    g_to = r_0;
    i_to = g_to*X_to_act*X_to_inact*(v-E_K);
    ode(X_ca_act, t) = (x_ca_inf_act-X_ca_act)/tau_ca_act;
    ode(X_ca_inact, t) = (x_ca_inf_inact-X_ca_inact)/tau_ca_inact;
    ode(X_fca_inact, t) = k_fca*(x_fca_inf_inact-X_fca_inact)/tau_fca;
    p_CaL = d_0;
    p_CaL_shannonTot = p_CaL_shannonCa+p_CaL_shannonNa+p_CaL_shannonK;
    p_CaL_shannonCap = p_CaL_shannonCa/p_CaL_shannonTot;
    p_CaL_shannonNap = p_CaL_shannonNa/p_CaL_shannonTot;
    p_CaL_shannonKp = p_CaL_shannonK/p_CaL_shannonTot;
    p_CaL_Ca = p_CaL_shannonCap*p_CaL;
    p_CaL_Na = p_CaL_shannonNap*p_CaL;
    p_CaL_K = p_CaL_shannonKp*p_CaL;
    ibarca = p_CaL_Ca*4.0{dimensionless}*v*sqr(F)/(R*T)*(0.341{dimensionless}*ca_i*exp(2.0{dimensionless}*v*F/(R*T))-0.341{dimensionless}*Cao)/(exp(2.0{dimensionless}*v*F/(R*T))-1.0{dimensionless});
    i_CaL_Ca = ibarca*X_ca_act*X_ca_inact*X_fca_inact;
    ibarna = p_CaL_Na*v*sqr(F)/(R*T)*(0.75{dimensionless}*Na_i*exp(2.0{dimensionless}*v*F/(R*T))-0.75{dimensionless}*Nao)/(exp(2.0{dimensionless}*v*F/(R*T))-1.0{dimensionless});
    i_CaL_Na = ibarna*X_ca_act*X_ca_inact*X_fca_inact;
    ibark = p_CaL_K*v*sqr(F)/(R*T)*(0.75{dimensionless}*Ki*exp(2.0{dimensionless}*v*F/(R*T))-0.75{dimensionless}*Ko)/(exp(2.0{dimensionless}*v*F/(R*T))-1.0{dimensionless});
    i_CaL_K = ibark*X_ca_act*X_ca_inact*X_fca_inact;
    i_CaL = i_CaL_Ca+i_CaL_Na+i_CaL_K;
    ode(X_cat_act, t) = (x_cat_inf_act-X_cat_act)/tau_cat_act;
    ode(X_cat_inact, t) = (x_cat_inf_inact-X_cat_inact)/tau_cat_inact;
    i_cat = g_cat*X_cat_act*X_cat_inact*(v-E_Ca);
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Cao/ca_i);
    E_Na = R*T/F*ln(Nao/Na_i);
    ode(X_na_h_inact, t) = (x_na_h_inf_inact-X_na_h_inact)/tau_na_h_inact;
    ode(X_na_m_act, t) = (x_na_m_inf_act-X_na_m_act)/tau_na_m_act;
    ode(X_na_j_inact, t) = (x_na_j_inf_inact-X_na_j_inact)/tau_na_j_inact;
    i_na = g_Na*pow(X_na_m_act, 3{dimensionless})*X_na_h_inact*X_na_j_inact*(v-E_Na);
    ode(X_f_act, t) = (x_f_inf_act-X_f_act)/tau_f_act;
    Na_frac = NatoK_ratio/(NatoK_ratio+1{dimensionless});
    i_fNa = Na_frac*g_f*X_f_act*(v-E_Na);
    i_fK = (1{dimensionless}-Na_frac)*g_f*X_f_act*(v-E_K);
    i_f = i_fNa+i_fK;
    i_naca = kNaCa*(exp(gamma*v*F/(R*T))*pow(Na_i, 3.0{dimensionless})*Cao-exp((gamma-1.0{dimensionless})*v*F/(R*T))*pow(Nao, 3{dimensionless})*ca_i*alpha)/((pow(KmNai, 3.0{dimensionless})+pow(Nao, 3{dimensionless}))*(KmCa+Cao)*(1.0{dimensionless}+Ksat*exp((gamma-1.0{dimensionless})*v*F/(R*T))));
    i_nak = PNaK*Ko*Na_i/((Ko+Km_K)*(Na_i+Km_Na)*(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*v*F/(R*T))+0.0353{dimensionless}*exp(-v*F/(R*T))));
    i_up = VmaxUp/(1.0{dimensionless}+sqr(Kup)/sqr(ca_i));
    j_leak = (ca_SR-ca_i)*V_leak;
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(ec50SR/ca_SR, 2.5{dimensionless}));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    CI = 1{dimensionless}-C-O-I;
    ode(C, t) = kim*CI-kiSRCa*ca_i*C-(koSRCa*sqr(ca_i)*C-kom*O);
    ode(O, t) = koSRCa*sqr(ca_i)*C-kom*O-(kiSRCa*ca_i*O-kim*I);
    ode(I, t) = kiSRCa*ca_i*O-kim*I-(kom*I-koSRCa*sqr(ca_i)*CI);
    j_rel = ks*O*(ca_SR-ca_i)*V_SR/Vc;
    i_b_Na = g_b_Na*(v-E_Na);
    i_b_Ca = g_b_Ca*(v-E_Ca);
    i_PCa = g_PCa*ca_i/(ca_i+KPCa);
    Ca_SR_bufSR = 1{dimensionless}/(1{dimensionless}+Buf_SR*Kbuf_SR/sqr(ca_SR+Kbuf_SR));
    ode(ca_SR, t) = Ca_SR_bufSR*Vc/V_SR*(i_up-(j_rel+j_leak));
    Cai_buf = 1{dimensionless}/(1.0{dimensionless}+Buf_C*Kbuf_C/sqr(ca_i+Kbuf_C));
    ode(ca_ligand, t) = 0{dimensionless};
    ode(ca_i, t) = Cai_buf*(j_leak-i_up+j_rel-ca_ligand-(i_CaL_Ca+i_cat+i_b_Ca+i_PCa-2{dimensionless}*i_naca)*1{dimensionless}*Cm/(2{dimensionless}*Vc*F));
    ode(Na_i, t) = -Cm*(i_na+i_b_Na+i_fNa+3{dimensionless}*i_nak+3{dimensionless}*i_naca+i_CaL_Na)/(F*Vc);
    ode(Ki, t) = -Cm*(i_k1+i_to+i_Kr+i_Ks+i_fK-2{dimensionless}*i_nak+i_CaL_K)/(F*Vc);
    i_voltageclamp = (v_clamp-v)/R_clamp;
    ode(v, t) = -(i_k1+i_to+i_Kr+i_Ks+i_CaL+i_cat+i_nak+i_na+i_naca+i_PCa+i_f+i_b_Na+i_b_Ca-i_stim-i_voltageclamp);
  enddef;
  def map between gating_Ik1 and parameter for
    vars v and v;
  enddef;
  def map between main and parameter_Ik1 for
    vars var_1 and var_1;
  enddef;
  def map between gating_Ik1 and parameter_Ik1 for
    vars var_2 and var_2;
    vars var_3 and var_3;
    vars var_4 and var_4;
    vars var_5 and var_5;
    vars var_6 and var_6;
  enddef;
  def map between main and gating_Ik1 for
    vars x_inf_act_Ik1 and x_inf_act_Ik1;
  enddef;
  def map between main and gating_Ikr for
    vars x_inf_act and x_inf_act;
    vars x_inf_inact and x_inf_inact;
    vars tau_kr_act and tau_kr_act;
    vars tau_kr_inact and tau_kr_inact;
  enddef;
  def map between main and parameter_Ikr for
    vars Xr1_0 and Xr1_0;
    vars Xr1_1 and Xr1_1;
    vars Xr1_2 and Xr1_2;
    vars Xr1_5 and Xr1_5;
    vars Xr1_6 and Xr1_6;
    vars Xr2_1 and Xr2_1;
    vars Xr2_2 and Xr2_2;
    vars Xr2_5 and Xr2_5;
    vars Xr2_6 and Xr2_6;
    vars Xr1_7 and Xr1_7;
    vars Xr2_7 and Xr2_7;
  enddef;
  def map between gating_Ikr and parameter for
    vars v and v;
  enddef;
  def map between parameter_Ikr and gating_Ikr for
    vars Xr1_1 and Xr1_1;
    vars Xr1_2 and Xr1_2;
    vars Xr1_5 and Xr1_5;
    vars Xr1_6 and Xr1_6;
    vars Xr2_1 and Xr2_1;
    vars Xr2_2 and Xr2_2;
    vars Xr2_5 and Xr2_5;
    vars Xr2_6 and Xr2_6;
    vars Xr1_7 and Xr1_7;
    vars Xr2_7 and Xr2_7;
  enddef;
  def map between main and gating_Iks for
    vars x_ks_inf_act and x_ks_inf_act;
    vars tau_ks_act and tau_ks_act;
  enddef;
  def map between main and parameter_Iks for
    vars ks_0 and ks_0;
    vars ks_1 and ks_1;
    vars ks_2 and ks_2;
    vars ks_5 and ks_5;
    vars ks_6 and ks_6;
    vars tau_ks_const and tau_ks_const;
  enddef;
  def map between gating_Iks and parameter for
    vars v and v;
  enddef;
  def map between parameter_Iks and gating_Iks for
    vars ks_1 and ks_1;
    vars ks_2 and ks_2;
    vars ks_5 and ks_5;
    vars ks_6 and ks_6;
    vars tau_ks_const and tau_ks_const;
  enddef;
  def map between main and gating_Ito for
    vars x_to_inf_act and x_to_inf_act;
    vars x_to_inf_inact and x_to_inf_inact;
    vars tau_to_act and tau_to_act;
    vars tau_to_inact and tau_to_inact;
  enddef;
  def map between main and parameter_Ito for
    vars r_0 and r_0;
    vars r_1 and r_1;
    vars r_2 and r_2;
    vars r_5 and r_5;
    vars r_6 and r_6;
    vars s_1 and s_1;
    vars s_2 and s_2;
    vars s_5 and s_5;
    vars s_6 and s_6;
    vars tau_r_const and tau_r_const;
    vars tau_s_const and tau_s_const;
  enddef;
  def map between gating_Ito and parameter for
    vars v and v;
  enddef;
  def map between parameter_Ito and gating_Ito for
    vars r_1 and r_1;
    vars r_2 and r_2;
    vars r_5 and r_5;
    vars r_6 and r_6;
    vars s_1 and s_1;
    vars s_2 and s_2;
    vars s_5 and s_5;
    vars s_6 and s_6;
    vars tau_r_const and tau_r_const;
    vars tau_s_const and tau_s_const;
  enddef;
  def map between main and gating_Ica for
    vars x_ca_inf_act and x_ca_inf_act;
    vars x_ca_inf_inact and x_ca_inf_inact;
    vars x_fca_inf_inact and x_fca_inf_inact;
    vars tau_ca_act and tau_ca_act;
    vars tau_ca_inact and tau_ca_inact;
    vars tau_fca and tau_fca;
    vars ca_i and ca_i;
  enddef;
  def map between main and parameter_Ica for
    vars d_0 and d_0;
    vars d_1 and d_1;
    vars d_2 and d_2;
    vars d_5 and d_5;
    vars d_6 and d_6;
    vars f_1 and f_1;
    vars f_2 and f_2;
    vars f_5 and f_5;
    vars f_6 and f_6;
    vars tau_d_const and tau_d_const;
    vars tau_f_const and tau_f_const;
  enddef;
  def map between main and parameter for
    vars v and v;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Cao and Cao;
    vars R and R;
    vars T and T;
    vars F and F;
    vars V_SR and V_SR;
    vars Vc and Vc;
    vars Cm and Cm;
  enddef;
  def map between gating_Ica and parameter for
    vars v and v;
  enddef;
  def map between parameter_Ica and gating_Ica for
    vars d_1 and d_1;
    vars d_2 and d_2;
    vars d_5 and d_5;
    vars d_6 and d_6;
    vars f_1 and f_1;
    vars f_2 and f_2;
    vars f_5 and f_5;
    vars f_6 and f_6;
    vars tau_d_const and tau_d_const;
    vars tau_f_const and tau_f_const;
  enddef;
  def map between gating_Icat and parameter for
    vars v and v;
  enddef;
  def map between main and gating_Icat for
    vars x_cat_inf_act and x_cat_inf_act;
    vars x_cat_inf_inact and x_cat_inf_inact;
    vars tau_cat_act and tau_cat_act;
    vars tau_cat_inact and tau_cat_inact;
  enddef;
  def map between main and gating_Ina for
    vars x_na_h_inf_inact and x_na_h_inf_inact;
    vars x_na_m_inf_act and x_na_m_inf_act;
    vars x_na_j_inf_inact and x_na_j_inf_inact;
    vars tau_na_h_inact and tau_na_h_inact;
    vars tau_na_m_act and tau_na_m_act;
    vars tau_na_j_inact and tau_na_j_inact;
  enddef;
  def map between main and parameter_Ina for
    vars g_Na and g_Na;
    vars m_1 and m_1;
    vars m_2 and m_2;
    vars m_5 and m_5;
    vars m_6 and m_6;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars h_5 and h_5;
    vars h_6 and h_6;
    vars j_1 and j_1;
    vars j_2 and j_2;
    vars tau_m_const and tau_m_const;
    vars tau_h_const and tau_h_const;
    vars tau_j_const and tau_j_const;
  enddef;
  def map between gating_Ina and parameter for
    vars v and v;
  enddef;
  def map between parameter_Ina and gating_Ina for
    vars m_1 and m_1;
    vars m_2 and m_2;
    vars m_5 and m_5;
    vars m_6 and m_6;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars h_5 and h_5;
    vars h_6 and h_6;
    vars j_1 and j_1;
    vars j_2 and j_2;
    vars tau_m_const and tau_m_const;
    vars tau_h_const and tau_h_const;
    vars tau_j_const and tau_j_const;
  enddef;
  def map between main and gating_If for
    vars x_f_inf_act and x_f_inf_act;
    vars tau_f_act and tau_f_act;
  enddef;
  def map between main and parameter_If for
    vars g_f and g_f;
    vars xf_1 and xf_1;
    vars xf_2 and xf_2;
    vars xf_5 and xf_5;
    vars xf_6 and xf_6;
    vars xf_const and xf_const;
  enddef;
  def map between gating_If and parameter for
    vars v and v;
  enddef;
  def map between parameter_If and gating_If for
    vars xf_1 and xf_1;
    vars xf_2 and xf_2;
    vars xf_5 and xf_5;
    vars xf_6 and xf_6;
    vars xf_const and xf_const;
  enddef;
enddef;
