// This CellML file was generated on 2/11/2009 at 12:38:06 at p.m. using:
//
// COR (0.9.31.1329)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Given Geoffrey; Other Rogan; Family Nunns; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; gnunns1@jhem.jhu.edu
// created: W3CDTF 2008-07-07T00:00:00+12:00
// comment: This CellML version of the model runs in OpenCell and COR to reproduce the original matlab code, which it has been based off. The units are consistent throughout.; FN Geoff Nunns
// reference: subject_type keyword; metabolism; ATP synthesis; mitochondria; skeletal muscle
// simulation: pointDensity 10000; maximumStepSize 0.1
// reference: Pubmed_id 16837647; last_page C124; title Oxidative ATP Synthesis in Skeletal Muscle is Controlled by Substrate Feedback; W3CDTF 2006-07-12 00:00; Given Fan; Family Wu; Given Jeroen; Other L; Other A; Family Jeneson; Given Daniel; Other A; Family Beard; volume 292; title Am J Physiol Cell Physiol; first_page C115
// comment: This CellML version of the model runs in OpenCell and COR to reproduce the original matlab code, which it has been based off. The units are consistent throughout.; FN Geoff Nunns
def model wu_jeneson_beard_2006 as
  // Oxidative ATP Synthesis in Skeletal Muscle is Controlled by Substrate Feedback
  //
  // Geoffrey Nunns
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model runs in OpenCell and COR to reproduce the original matlab code, which it has been based off. The units are consistent throughout.
  //
  // Model Structure
  //
  // Abstract: Data from 31P-nuclear magnetic resonance spectroscopy of human forearm flexor muscle were analyzed based on a previously developed model of mitochondrial oxidative phosphorylation [PLoS Comp. Bio. (2005) 1:e36] to test the hypothesis that substrate level (concentrations of ADP and inorganic phosphate) represents the primary signal governing the rate of mitochondrial ATP synthesis and maintaining the cellular ATP hydrolysis potential in skeletal muscle. Model-based predictions of cytoplasmic concentra-tions of phosphate metabolites (ATP, ADP, and inorganic phosphate) matched data obtained from 20 healthy volunteers and indicated that as work rate is varied from rest to maximal exercise commensurate increases in the rate of mitochondrial ATP synthesis are effected by changes in concentrations of avail-able ADP and inorganic phosphate. Additional data from patients with a defect of complex I of the res-piratory chain and a patient with a deficiency in the mitochondrial adenine nucleoside translocase were also predicted the by the model by making the appropriate adjustments to the activities of the affected proteins associates with the defects, providing both further validation of the biophysical model of the control of oxidative phosphorylation and insight into the impact of these diseases on the ability of the cell to maintain its energetic state.
  //
  // The complete original paper reference is cited below:
  //
  // Oxidative ATP Synthesis in Skeletal Muscle is Controlled by Substrate Feedback, Fan Wu, Jeroen A.L. Jeneson, Daniel A. Beard, 2006, American Journal of Physiology - Cell Physiology, 292, C115-24 PubMed ID: 16837647 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=16837647&dopt=Abstract)
  //
  // model diagram
  //
  // Schematic diagram of the components included in the computational model of oxidative phosphorylation in skeletal muscular cells. All reactions and mass transport take place in three compartments: cytoplasm, mitochondrial intermembrane space, and the mitochondrial matrix.
  def unit cell as base unit;
  def unit cytoplasm as base unit;
  def unit mitochondria as base unit;
  def unit cyto_per_cell as
    unit cytoplasm;
    unit cell {expo: -1};
  enddef;
  def unit mito_per_cell as
    unit mitochondria;
    unit cell {expo: -1};
  enddef;
  def unit mito_per_cyto as
    unit mitochondria;
    unit cytoplasm {expo: -1};
  enddef;
  def unit l_cyto_per_l_mito as
    unit cytoplasm;
    unit mitochondria {expo: -1};
  enddef;
  def unit l_water_per_l_mito as
    unit mitochondria {expo: -1};
  enddef;
  def unit l_water_per_l_cyto as
    unit cytoplasm {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit liter {expo: -1};
  enddef;
  def unit molar_per_second as
    unit molar;
    unit second {expo: -1};
  enddef;
  def unit micromolar as
    unit molar {pref: micro};
  enddef;
  def unit per_molar as
    unit molar {expo: -1};
  enddef;
  def unit micron_per_second as
    unit metre {pref: -6};
    unit second {expo: -1};
    unit mitochondria {expo: -1};
  enddef;
  def unit per_micron as
    unit metre {expo: -1, pref: -6};
  enddef;
  def unit kilojoule_per_mole as
    unit joule {pref: kilo};
    unit mole {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit kilojoule_per_mole_per_millivolt as
    unit kilojoule_per_mole;
    unit millivolt {expo: -1};
  enddef;
  def unit molar_per_cell as
    unit mole;
    unit liter {expo: -1};
    unit cell {expo: -1};
  enddef;
  def unit molar_per_cyto as
    unit mole;
    unit liter {expo: -1};
    unit cytoplasm {expo: -1};
  enddef;
  def unit molar_per_mito as
    unit mole;
    unit liter {expo: -1};
    unit mitochondria {expo: -1};
  enddef;
  def unit mole_per_second_per_l_cell as
    unit molar_per_cell;
    unit second {expo: -1};
  enddef;
  def unit mole_per_second_per_l_cyto as
    unit molar_per_cyto;
    unit second {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito as
    unit molar_per_mito;
    unit second {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito_per_molar as
    unit mole_per_second_per_l_mito;
    unit molar {expo: -1};
  enddef;
  def unit mole_per_second_per_l_cyto_per_molar as
    unit mole_per_second_per_l_cyto;
    unit molar {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito_per_molar_per_half_molar as
    unit mole_per_second_per_l_mito_per_molar;
    unit molar {expo: -0.5};
  enddef;
  def unit mole_per_second_per_l_mito_per_molar_per_molar as
    unit mole_per_second_per_l_mito_per_molar;
    unit molar {expo: -1};
  enddef;
  def unit mole_per_second_per_l_cyto_per_molar_per_molar as
    unit mole_per_second_per_l_cyto;
    unit molar {expo: -2};
  enddef;
  def unit mole_per_l_mito_per_millivolt as
    unit molar_per_mito;
    unit millivolt {expo: -1};
  enddef;
  def unit mole_per_second_per_l_mito_per_molar_per_millivolt as
    unit mole_per_second_per_l_mito_per_molar;
    unit millivolt {expo: -1};
  enddef;

  def comp Environment as
    var time: second {pub: out};
    var O2_x: molar {init: 3.48e-5, pub: out};
    var X_AtC: mole_per_second_per_l_cell {init: 0e-4, pub: out};
  enddef;

  def comp fixed_parameters as
    var RT: kilojoule_per_mole {init: 2.5775, pub: out};
    var F: kilojoule_per_mole_per_millivolt {init: 0.096484, pub: out};
    var dG_C1o: kilojoule_per_mole {init: -69.37};
    var dG_C3o: kilojoule_per_mole {init: -32.53};
    var dG_C4o: kilojoule_per_mole {init: -122.94};
    var dG_C1op: kilojoule_per_mole {pub: out};
    var dG_C3op: kilojoule_per_mole {pub: out};
    var dG_C4op: kilojoule_per_mole {pub: out};
    var dG_F1o: kilojoule_per_mole {init: 36.03, pub: out};
    var dG_H: kilojoule_per_mole {pub: out};
    var k_dHPI: molar {pub: out};
    var k_dHatp: molar {pub: out};
    var k_dHadp: molar {pub: out};
    var K_DT: molar {init: 24e-6, pub: out};
    var K_DD: molar {init: 347e-6, pub: out};
    var K_AK: dimensionless {init: 0.4331, pub: out};
    var K_CK: per_molar {init: 1.66e9, pub: out};
    var W_m: l_water_per_l_mito {pub: out};
    var W_c: l_water_per_l_cyto {pub: out};
    var W_x: l_water_per_l_mito {pub: out};
    var W_i: l_water_per_l_mito {pub: out};
    var V_cyto: cyto_per_cell {init: 0.894, pub: out};
    var V_mito: mito_per_cell {init: 0.056, pub: out};
    var Rm_cyto: mito_per_cyto {pub: out};
    var Rm_cell: mito_per_cell {pub: out};
    var Rc_cell: cyto_per_cell {pub: out};
    var n_A: dimensionless {init: 3, pub: out};
    var C_tot: molar {init: 2.7e-3, pub: out};
    var CR_tot: molar {init: 42.7e-3, pub: out};
    var Q_tot: molar {init: 1.35e-3, pub: out};
    var NAD_tot: molar {init: 2.97e-3, pub: out};
    var pH_C: dimensionless {init: 7};
    var H_c: molar {pub: out};
    var K_c: molar {init: 0.15, pub: out};
    var H_i: molar {pub: out};
    var K_i: molar {pub: out};
    var H_x: molar {pub: in};
    var deltaPsi: millivolt {pub: in};
    H_c = 1{molar}*pow(10{dimensionless}, -pH_C);
    k_dHPI = 1{molar}*pow(10{dimensionless}, -6.75{dimensionless});
    k_dHatp = 1{molar}*pow(10{dimensionless}, -6.48{dimensionless});
    k_dHadp = 1{molar}*pow(10{dimensionless}, -6.29{dimensionless});
    W_m = 0.664{dimensionless}*1.09{l_water_per_l_mito};
    W_x = 0.9{dimensionless}*W_m;
    W_i = 0.1{dimensionless}*W_m;
    W_c = 0.807{dimensionless}*1.044{l_water_per_l_cyto};
    H_i = H_c;
    K_i = K_c;
    Rm_cyto = V_mito/V_cyto;
    Rm_cell = V_mito;
    Rc_cell = V_cyto;
    dG_H = F*deltaPsi+RT*ln(H_i/H_x);
    dG_C1op = dG_C1o-1{dimensionless}*RT*ln(H_x/1e-7{molar});
    dG_C3op = dG_C3o+2{dimensionless}*RT*ln(H_x/1e-7{molar});
    dG_C4op = dG_C4o-2{dimensionless}*RT*ln(H_x/1e-7{molar});
  enddef;

  def comp adjustable_parameters as
    var k_PI1: molar {init: 0.1553e-3, pub: out};
    var k_PI2: molar {init: 0.8222e-3, pub: out};
    var k_PI3: molar {init: 0.3601e-3, pub: out};
    var k_PI4: molar {init: 5.651e-3, pub: out};
    var k_PIH: molar {init: 2.542e-4, pub: out};
    var r: dimensionless {init: 4.559, pub: out};
    var X_DH: mole_per_second_per_l_mito_per_molar {init: 0.0866, pub: out};
    var X_C1: mole_per_second_per_l_mito_per_molar_per_molar {init: 4.405e3, pub: out};
    var X_C3: mole_per_second_per_l_mito_per_molar_per_half_molar {init: 4.887, pub: out};
    var X_C4: mole_per_second_per_l_mito_per_molar {init: 6.766e-5, pub: out};
    var X_F1: mole_per_second_per_l_mito_per_molar_per_molar {init: 1e3, pub: out};
    var X_ANT: mole_per_second_per_l_mito {init: 8.123e-3, pub: out};
    var X_PI1: mole_per_second_per_l_mito_per_molar {init: 3.85e5, pub: out};
    var X_KH: mole_per_second_per_l_mito_per_molar_per_molar {init: 5.651e7, pub: out};
    var X_Hle: mole_per_second_per_l_mito_per_molar_per_millivolt {init: 200, pub: out};
    var X_K: mole_per_second_per_l_mito_per_molar_per_millivolt {init: 0, pub: out};
    var k_mADP: molar {init: 3.5e-6, pub: out};
    var X_AK: mole_per_second_per_l_mito_per_molar_per_molar {init: 1e7, pub: out};
    var X_CK: mole_per_second_per_l_mito_per_molar_per_molar {init: 1e7, pub: out};
    var X_MgA: mole_per_second_per_l_mito_per_molar_per_molar {init: 1e7, pub: out};
    var k_O2: molar {init: 1.2e-4, pub: out};
    var x_buff: per_molar {init: 100, pub: out};
    var C_IM: mole_per_l_mito_per_millivolt {init: 6.75e-6, pub: out};
    var X_A: micron_per_second {init: 85, pub: out};
    var X_PI2: micron_per_second {init: 327, pub: out};
    var gamma: per_micron {init: 5.99, pub: out};
  enddef;

  def comp dNAD_x_dt as
    var NAD_x: molar {pub: out};
    var NAD_tot: molar {pub: in};
    var NADH_x: molar {pub: in};
    NAD_x = NAD_tot-NADH_x;
  enddef;

  def comp dQH2_x_dt as
    var QH2_x: molar {pub: out};
    var Q_tot: molar {pub: in};
    var Q_x: molar {pub: in};
    QH2_x = Q_tot-Q_x;
  enddef;

  def comp dCred_x_dt as
    var Cred_x: molar {pub: out};
    var C_tot: molar {pub: in};
    var Cox_x: molar {pub: in};
    Cred_x = C_tot-Cox_x;
  enddef;

  def comp dATP_fx_dt as
    var ATP_fx: molar {pub: out};
    var ATP_x: molar {pub: in};
    var ATP_mx: molar {pub: in};
    ATP_fx = ATP_x-ATP_mx;
  enddef;

  def comp dADP_fx_dt as
    var ADP_fx: molar {pub: out};
    var ADP_x: molar {pub: in};
    var ADP_mx: molar {pub: in};
    ADP_fx = ADP_x-ADP_mx;
  enddef;

  def comp dH_x_dt as
    var pH_x: dimensionless {init: 7, pub: out};
    var H_x: molar {pub: out};
    var time: second {pub: in};
    var n_A: dimensionless {pub: in};
    var x_buff: per_molar {pub: in};
    var J_DH: mole_per_second_per_l_mito {pub: in};
    var J_C1: mole_per_second_per_l_mito {pub: in};
    var J_C3: mole_per_second_per_l_mito {pub: in};
    var J_C4: mole_per_second_per_l_mito {pub: in};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_PI1: mole_per_second_per_l_mito {pub: in};
    var J_KH: mole_per_second_per_l_mito {pub: in};
    var J_Hle: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    H_x = 1{molar}*pow(10{dimensionless}, -pH_x);
    ode(pH_x, time) = -1{dimensionless}/2.303{dimensionless}*x_buff*(J_DH-5{dimensionless}*J_C1-2{dimensionless}*J_C3-4{dimensionless}*J_C4+(n_A-1{dimensionless})*J_F1+2{dimensionless}*J_PI1-J_KH+J_Hle)/W_x;
  enddef;

  def comp dK_x_dt as
    var K_x: molar {init: 0.14661, pub: out};
    var time: second {pub: in};
    var J_K: mole_per_second_per_l_mito {pub: in};
    var J_KH: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(K_x, time) = (J_KH+J_K)/W_x;
  enddef;

  def comp dMg_x_dt as
    var Mg_x: molar {init: 1.0229e-3, pub: out};
    var time: second {pub: in};
    var J_MgATP_x: mole_per_second_per_l_mito {pub: in};
    var J_MgADP_x: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(Mg_x, time) = (-J_MgADP_x-J_MgATP_x)/W_x;
  enddef;

  def comp dNADH_x_dt as
    var NADH_x: molar {init: 0.0015723, pub: out};
    var time: second {pub: in};
    var J_DH: mole_per_second_per_l_mito {pub: in};
    var J_C1: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(NADH_x, time) = (J_DH-J_C1)/W_x;
  enddef;

  def comp dQ_x_dt as
    var Q_x: molar {init: 6.75e-4, pub: out};
    var time: second {pub: in};
    var J_C1: mole_per_second_per_l_mito {pub: in};
    var J_C3: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(Q_x, time) = -(J_C1-J_C3)/W_x;
  enddef;

  def comp dCox_x_dt as
    var Cox_x: molar {init: 1.35e-3, pub: out};
    var time: second {pub: in};
    var J_C3: mole_per_second_per_l_mito {pub: in};
    var J_C4: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(Cox_x, time) = -(2{dimensionless}*J_C3-2{dimensionless}*J_C4)/W_x;
  enddef;

  def comp dATP_x_dt as
    var ATP_x: molar {init: 0.0026657, pub: out};
    var time: second {pub: in};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(ATP_x, time) = (J_F1-J_ANT)/W_x;
  enddef;

  def comp dADP_x_dt as
    var ADP_x: molar {init: 0.0073343, pub: out};
    var time: second {pub: in};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(ADP_x, time) = (-J_F1+J_ANT)/W_x;
  enddef;

  def comp dATP_mx_dt as
    var ATP_mx: molar {init: 0.0026046, pub: out};
    var time: second {pub: in};
    var J_MgATP_x: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(ATP_mx, time) = J_MgATP_x/W_x;
  enddef;

  def comp dADP_mx_dt as
    var ADP_mx: molar {init: 0.0054765, pub: out};
    var time: second {pub: in};
    var J_MgADP_x: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(ADP_mx, time) = J_MgADP_x/W_x;
  enddef;

  def comp dPI_x_dt as
    var PI_x: molar {init: 1.72e-4, pub: out};
    var time: second {pub: in};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_PI1: mole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    ode(PI_x, time) = (-J_F1+J_PI1)/W_x;
  enddef;

  def comp dATP_fi_dt as
    var ATP_fi: molar {pub: out};
    var ATP_i: molar {pub: in};
    var ATP_mi: molar {pub: in};
    ATP_fi = ATP_i-ATP_mi;
  enddef;

  def comp dADP_fi_dt as
    var ADP_fi: molar {pub: out};
    var ADP_i: molar {pub: in};
    var ADP_mi: molar {pub: in};
    ADP_fi = ADP_i-ADP_mi;
  enddef;

  def comp dATP_i_dt as
    var ATP_i: molar {init: 0.0065339, pub: out};
    var time: second {pub: in};
    var J_ATP: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var J_AKi: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    ode(ATP_i, time) = (J_ATP+J_ANT+J_AKi)/W_i;
  enddef;

  def comp dADP_i_dt as
    var ADP_i: molar {init: 6.5773e-5, pub: out};
    var time: second {pub: in};
    var J_ADP: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var J_AKi: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    ode(ADP_i, time) = (J_ADP-J_ANT-2{dimensionless}*J_AKi)/W_i;
  enddef;

  def comp dAMP_i_dt as
    var AMP_i: molar {init: 2.8837e-7, pub: out};
    var time: second {pub: in};
    var J_AMP: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var J_AKi: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    ode(AMP_i, time) = (J_AMP+J_AKi)/W_i;
  enddef;

  def comp dATP_mi_dt as
    var ATP_mi: molar {init: 0.0063812, pub: out};
    var time: second {pub: in};
    var J_MgATP_i: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    ode(ATP_mi, time) = J_MgATP_i/W_i;
  enddef;

  def comp dADP_mi_dt as
    var ADP_mi: molar {init: 4.8866e-5, pub: out};
    var time: second {pub: in};
    var J_MgADP_i: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    ode(ADP_mi, time) = J_MgADP_i/W_i;
  enddef;

  def comp dPI_i_dt as
    var PI_i: molar {init: 1.72e-4, pub: out};
    var time: second {pub: in};
    var J_PI1: mole_per_second_per_l_mito {pub: in};
    var J_PI2: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    ode(PI_i, time) = (-J_PI1+J_PI2)/W_i;
  enddef;

  def comp dMg_i_dt as
    var Mg_i: molar {init: 0.0010029, pub: out};
    var time: second {pub: in};
    var J_MgATP_i: mole_per_second_per_l_mito {pub: in};
    var J_MgADP_i: mole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    ode(Mg_i, time) = (-J_MgADP_i-J_MgATP_i)/W_i;
  enddef;

  def comp dATP_c_dt as
    var ATP_c: molar {init: 0.0081312, pub: out};
    var time: second {pub: in};
    var J_ATP: mole_per_second_per_l_mito {pub: in};
    var J_AKc: mole_per_second_per_l_cyto {pub: in};
    var J_AtC: mole_per_second_per_l_cell {pub: in};
    var J_CKc: mole_per_second_per_l_cyto {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var Rm_cyto: mito_per_cyto {pub: in};
    var Rc_cell: cyto_per_cell {pub: in};
    ode(ATP_c, time) = (-Rm_cyto*J_ATP+J_AKc-J_AtC/Rc_cell+J_CKc)/W_c;
  enddef;

  def comp dADP_c_dt as
    var ADP_c: molar {init: 6.85e-5, pub: out};
    var time: second {pub: in};
    var J_ADP: mole_per_second_per_l_mito {pub: in};
    var J_AKc: mole_per_second_per_l_cyto {pub: in};
    var J_AtC: mole_per_second_per_l_cell {pub: in};
    var J_CKc: mole_per_second_per_l_cyto {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var Rm_cyto: mito_per_cyto {pub: in};
    var Rc_cell: cyto_per_cell {pub: in};
    ode(ADP_c, time) = (-Rm_cyto*J_ADP-2{dimensionless}*J_AKc+J_AtC/Rc_cell-J_CKc)/W_c;
  enddef;

  def comp dAMP_c_dt as
    var AMP_c: molar {init: 3.0911e-7, pub: out};
    var time: second {pub: in};
    var J_AMP: mole_per_second_per_l_mito {pub: in};
    var J_AKc: mole_per_second_per_l_cyto {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var Rm_cyto: mito_per_cyto {pub: in};
    ode(AMP_c, time) = (-Rm_cyto*J_AMP+J_AKc)/W_c;
  enddef;

  def comp dATP_mc_dt as
    var ATP_mc: molar {init: 0.0079786, pub: out};
    var time: second {pub: in};
    var J_MgATP_c: mole_per_second_per_l_cyto {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    ode(ATP_mc, time) = J_MgATP_c/W_c;
  enddef;

  def comp dADP_mc_dt as
    var ADP_mc: molar {init: 5.1958e-5, pub: out};
    var time: second {pub: in};
    var J_MgADP_c: mole_per_second_per_l_cyto {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    ode(ADP_mc, time) = J_MgADP_c/W_c;
  enddef;

  def comp dPI_c_dt as
    var PI_c: molar {init: 8.7702e-3, pub: out};
    var time: second {pub: in};
    var J_PI2: mole_per_second_per_l_mito {pub: in};
    var J_AtC: mole_per_second_per_l_cell {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    var Rm_cyto: mito_per_cyto {pub: in};
    var Rc_cell: cyto_per_cell {pub: in};
    ode(PI_c, time) = (-J_PI2*Rm_cyto+J_AtC/Rc_cell)/W_c;
  enddef;

  def comp dMg_c_dt as
    var Mg_c: molar {init: 0.001003, pub: out};
    var time: second {pub: in};
    var J_MgATP_c: mole_per_second_per_l_cyto {pub: in};
    var J_MgADP_c: mole_per_second_per_l_cyto {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    ode(Mg_c, time) = (-J_MgATP_c-J_MgADP_c)/W_c;
  enddef;

  def comp dPCr_c_dt as
    var PCr_c: molar {init: 23.589e-3, pub: out};
    var time: second {pub: in};
    var J_CKc: mole_per_second_per_l_cyto {pub: in};
    var W_c: l_water_per_l_cyto {pub: in};
    ode(PCr_c, time) = -J_CKc/W_c;
  enddef;

  def comp dATP_fc_dt as
    var ATP_fc: molar {pub: out};
    var ATP_c: molar {pub: in};
    var ATP_mc: molar {pub: in};
    ATP_fc = ATP_c-ATP_mc;
  enddef;

  def comp dADP_fc_dt as
    var ADP_fc: molar {pub: out};
    var ADP_c: molar {pub: in};
    var ADP_mc: molar {pub: in};
    ADP_fc = ADP_c-ADP_mc;
  enddef;

  def comp dCr_c_dt as
    var Cr_c: molar {pub: out};
    var CR_tot: molar {pub: in};
    var PCr_c: molar {pub: in};
    Cr_c = CR_tot-PCr_c;
  enddef;

  def comp ddeltaPsi_dt as
    var deltaPsi: millivolt {init: 166.67, pub: out};
    var time: second {pub: in};
    var J_C1: mole_per_second_per_l_mito {pub: in};
    var J_C3: mole_per_second_per_l_mito {pub: in};
    var J_C4: mole_per_second_per_l_mito {pub: in};
    var J_F1: mole_per_second_per_l_mito {pub: in};
    var J_ANT: mole_per_second_per_l_mito {pub: in};
    var J_Hle: mole_per_second_per_l_mito {pub: in};
    var J_K: mole_per_second_per_l_mito {pub: in};
    var n_A: dimensionless {pub: in};
    var C_IM: mole_per_l_mito_per_millivolt {pub: in};
    ode(deltaPsi, time) = (4{dimensionless}*J_C1+2{dimensionless}*J_C3+4{dimensionless}*J_C4-n_A*J_F1-J_ANT-J_Hle-J_K)/C_IM;
  enddef;

  def comp J_DH as
    var J_DH: mole_per_second_per_l_mito {pub: out};
    var X_DH: mole_per_second_per_l_mito_per_molar {pub: in};
    var r: dimensionless {pub: in};
    var NAD_x: molar {pub: in};
    var NADH_x: molar {pub: in};
    var PI_x: molar {pub: in};
    var k_PI1: molar {pub: in};
    var k_PI2: molar {pub: in};
    J_DH = X_DH*(r*NAD_x-NADH_x)*(1{dimensionless}+PI_x/k_PI1)/(1{dimensionless}+PI_x/k_PI2);
  enddef;

  def comp J_C1 as
    var J_C1: mole_per_second_per_l_mito {pub: out};
    var X_C1: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var NAD_x: molar {pub: in};
    var NADH_x: molar {pub: in};
    var Q_x: molar {pub: in};
    var QH2_x: molar {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var k_PI1: molar {pub: in};
    var k_PI2: molar {pub: in};
    var dG_C1op: kilojoule_per_mole {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    J_C1 = X_C1*(exp(-(dG_C1op+4{dimensionless}*dG_H)/RT)*NADH_x*Q_x-NAD_x*QH2_x);
  enddef;

  def comp J_C3 as
    var J_C3: mole_per_second_per_l_mito {pub: out};
    var X_C3: mole_per_second_per_l_mito_per_molar_per_half_molar {pub: in};
    var Cox_x: molar {pub: in};
    var Cred_x: molar {pub: in};
    var Q_x: molar {pub: in};
    var QH2_x: molar {pub: in};
    var PI_x: molar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var deltaPsi: millivolt {pub: in};
    var k_PI3: molar {pub: in};
    var k_PI4: molar {pub: in};
    var dG_C3op: kilojoule_per_mole {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    J_C3 = X_C3*(1{dimensionless}+PI_x/k_PI3)/(1{dimensionless}+PI_x/k_PI4)*(exp(-(dG_C3op+4{dimensionless}*dG_H-2{dimensionless}*F*deltaPsi)/(2{dimensionless}*RT))*Cox_x*sqrt(QH2_x)-Cred_x*sqrt(Q_x));
  enddef;

  def comp J_C4 as
    var J_C4: mole_per_second_per_l_mito {pub: out};
    var X_C4: mole_per_second_per_l_mito_per_molar {pub: in};
    var C_tot: molar {pub: in};
    var Cred_x: molar {pub: in};
    var Cox_x: molar {pub: in};
    var O2_x: molar {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var deltaPsi: millivolt {pub: in};
    var k_O2: molar {pub: in};
    var dG_C4op: kilojoule_per_mole {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    J_C4 = sel
      case O2_x < 1e-12{molar}:
        0{mole_per_second_per_l_mito};
      otherwise:
        X_C4*O2_x/(O2_x+k_O2)*(Cred_x/C_tot)*(exp(-(dG_C4op+2{dimensionless}*dG_H)/(2{dimensionless}*RT))*Cred_x*pow(O2_x/1{molar}, 0.25{dimensionless})-Cox_x*exp(F*deltaPsi/RT));
    endsel;
  enddef;

  def comp J_F1 as
    var J_F1: mole_per_second_per_l_mito {pub: out};
    var X_F1: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ATP_mx: molar {pub: in};
    var ADP_mx: molar {pub: in};
    var PI_x: molar {pub: in};
    var n_A: dimensionless {pub: in};
    var deltaPsi: millivolt {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var K_DD: molar {pub: in};
    var K_DT: molar {pub: in};
    var dG_F1o: kilojoule_per_mole {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    J_F1 = X_F1*(exp(-(dG_F1o-n_A*dG_H)/RT)*K_DD/K_DT*ADP_mx*PI_x-ATP_mx*1{molar});
  enddef;

  def comp J_ANT as
    var J_ANT: mole_per_second_per_l_mito {pub: out};
    var mincon: molar {init: 1e-9};
    var X_ANT: mole_per_second_per_l_mito {pub: in};
    var ATP_fx: molar {pub: in};
    var ADP_fx: molar {pub: in};
    var ATP_fi: molar {pub: in};
    var ADP_fi: molar {pub: in};
    var k_mADP: molar {pub: in};
    var deltaPsi: millivolt {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var Psi_x: millivolt;
    var Psi_i: millivolt;
    Psi_x = -0.65{dimensionless}*deltaPsi;
    Psi_i = 0.35{dimensionless}*deltaPsi;
    J_ANT = sel
      case (ADP_fi > mincon) or (ATP_fi > mincon):
        X_ANT*(ADP_fi/(ADP_fi+ATP_fi*exp(-F*Psi_i/RT))-ADP_fx/(ADP_fx+ATP_fx*exp(-F*Psi_x/RT)))*(ADP_fi/(ADP_fi+k_mADP));
      otherwise:
        0{mole_per_second_per_l_mito};
    endsel;
  enddef;

  def comp J_PI1 as
    var J_PI1: mole_per_second_per_l_mito {pub: out};
    var PI_i: molar {pub: in};
    var PI_x: molar {pub: in};
    var H_i: molar {pub: in};
    var H_x: molar {pub: in};
    var k_dHPI: molar {pub: in};
    var k_PIH: molar {pub: in};
    var H2PIi: molar {pub: out};
    var H2PIx: molar {pub: out};
    var X_PI1: mole_per_second_per_l_mito_per_molar {pub: in};
    H2PIi = PI_i*H_i/(H_i+k_dHPI);
    H2PIx = PI_x*H_x/(H_x+k_dHPI);
    J_PI1 = X_PI1*(H_i*H2PIi-H_x*H2PIx)/(H2PIi+k_PIH);
  enddef;

  def comp J_Hle as
    var J_Hle: mole_per_second_per_l_mito {pub: out};
    var X_Hle: mole_per_second_per_l_mito_per_molar_per_millivolt {pub: in};
    var PI_i: molar {pub: in};
    var PI_x: molar {pub: in};
    var H_i: molar {pub: in};
    var H_x: molar {pub: in};
    var deltaPsi: millivolt {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var mincond: millivolt {init: 1e-6};
    J_Hle = sel
      case abs(deltaPsi) > mincond:
        X_Hle*deltaPsi*(H_i*exp(F*deltaPsi/RT)-H_x)/(exp(F*deltaPsi/RT)-1{dimensionless});
      otherwise:
        X_Hle*RT*(H_i-H_x)/F;
    endsel;
  enddef;

  def comp J_KH as
    var J_KH: mole_per_second_per_l_mito {pub: out};
    var K_x: molar {pub: in};
    var K_i: molar {pub: in};
    var H_x: molar {pub: in};
    var H_i: molar {pub: in};
    var X_KH: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    J_KH = X_KH*(K_i*H_x-K_x*H_i);
  enddef;

  def comp J_K as
    var J_K: mole_per_second_per_l_mito {pub: out};
    var K_x: molar {pub: in};
    var K_i: molar {pub: in};
    var X_K: mole_per_second_per_l_mito_per_molar_per_millivolt {pub: in};
    var deltaPsi: millivolt {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var mincond: millivolt {init: 1e-6};
    J_K = sel
      case abs(deltaPsi) > mincond:
        X_K*deltaPsi*(K_i*exp(F*deltaPsi/RT)-K_x)/(exp(F*deltaPsi/RT)-1{dimensionless});
      otherwise:
        X_K*RT*(K_i-K_x)/F;
    endsel;
  enddef;

  def comp J_AMP as
    var J_AMP: mole_per_second_per_l_mito {pub: out};
    var AMP_c: molar {pub: in};
    var AMP_i: molar {pub: in};
    var gamma: per_micron {pub: in};
    var X_A: micron_per_second {pub: in};
    J_AMP = gamma*X_A*(AMP_c-AMP_i);
  enddef;

  def comp J_ADP as
    var J_ADP: mole_per_second_per_l_mito {pub: out};
    var ADP_c: molar {pub: in};
    var ADP_i: molar {pub: in};
    var gamma: per_micron {pub: in};
    var X_A: micron_per_second {pub: in};
    J_ADP = gamma*X_A*(ADP_c-ADP_i);
  enddef;

  def comp J_ATP as
    var J_ATP: mole_per_second_per_l_mito {pub: out};
    var ATP_c: molar {pub: in};
    var ATP_i: molar {pub: in};
    var gamma: per_micron {pub: in};
    var X_A: micron_per_second {pub: in};
    J_ATP = gamma*X_A*(ATP_c-ATP_i);
  enddef;

  def comp J_PI2 as
    var J_PI2: mole_per_second_per_l_mito {pub: out};
    var PI_c: molar {pub: in};
    var PI_i: molar {pub: in};
    var gamma: per_micron {pub: in};
    var X_PI2: micron_per_second {pub: in};
    J_PI2 = gamma*X_PI2*(PI_c-PI_i);
  enddef;

  def comp J_MgATP_x as
    var J_MgATP_x: mole_per_second_per_l_mito {pub: out};
    var X_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ATP_fx: molar {pub: in};
    var Mg_x: molar {pub: in};
    var ATP_mx: molar {pub: in};
    var K_DT: molar {pub: in};
    J_MgATP_x = X_MgA*(ATP_fx*Mg_x-K_DT*ATP_mx);
  enddef;

  def comp J_MgADP_x as
    var J_MgADP_x: mole_per_second_per_l_mito {pub: out};
    var X_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ADP_fx: molar {pub: in};
    var Mg_x: molar {pub: in};
    var ADP_mx: molar {pub: in};
    var K_DD: molar {pub: in};
    J_MgADP_x = X_MgA*(ADP_fx*Mg_x-K_DD*ADP_mx);
  enddef;

  def comp J_MgATP_i as
    var J_MgATP_i: mole_per_second_per_l_mito {pub: out};
    var X_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ATP_fi: molar {pub: in};
    var Mg_i: molar {pub: in};
    var ATP_mi: molar {pub: in};
    var K_DT: molar {pub: in};
    J_MgATP_i = X_MgA*(ATP_fi*Mg_i-K_DT*ATP_mi);
  enddef;

  def comp J_MgADP_i as
    var J_MgADP_i: mole_per_second_per_l_mito {pub: out};
    var X_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ADP_fi: molar {pub: in};
    var Mg_i: molar {pub: in};
    var ADP_mi: molar {pub: in};
    var K_DD: molar {pub: in};
    J_MgADP_i = X_MgA*(ADP_fi*Mg_i-K_DD*ADP_mi);
  enddef;

  def comp J_MgATP_c as
    var J_MgATP_c: mole_per_second_per_l_cyto {pub: out};
    var X_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ATP_fc: molar {pub: in};
    var Mg_c: molar {pub: in};
    var ATP_mc: molar {pub: in};
    var K_DT: molar {pub: in};
    J_MgATP_c = X_MgA*1{mito_per_cyto}*(ATP_fc*Mg_c-K_DT*ATP_mc);
  enddef;

  def comp J_MgADP_c as
    var J_MgADP_c: mole_per_second_per_l_cyto {pub: out};
    var X_MgA: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ADP_fc: molar {pub: in};
    var Mg_c: molar {pub: in};
    var ADP_mc: molar {pub: in};
    var K_DD: molar {pub: in};
    J_MgADP_c = X_MgA*1{mito_per_cyto}*(ADP_fc*Mg_c-K_DD*ADP_mc);
  enddef;

  def comp J_AKi as
    var J_AKi: mole_per_second_per_l_mito {pub: out};
    var X_AK: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ATP_i: molar {pub: in};
    var ADP_i: molar {pub: in};
    var AMP_i: molar {pub: in};
    var K_AK: dimensionless {pub: in};
    J_AKi = X_AK*(K_AK*ADP_i*ADP_i-AMP_i*ATP_i);
  enddef;

  def comp J_AKc as
    var J_AKc: mole_per_second_per_l_cyto {pub: out};
    var X_AK: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var ATP_c: molar {pub: in};
    var ADP_c: molar {pub: in};
    var AMP_c: molar {pub: in};
    var K_AK: dimensionless {pub: in};
    J_AKc = X_AK*1{mito_per_cyto}*(K_AK*ADP_c*ADP_c-AMP_c*ATP_c);
  enddef;

  def comp J_AtC as
    var J_AtC: mole_per_second_per_l_cell {pub: out};
    var X_AtC: mole_per_second_per_l_cell {pub: in};
    J_AtC = X_AtC;
  enddef;

  def comp J_CKc as
    var J_CKc: mole_per_second_per_l_cyto {pub: out};
    var X_CK: mole_per_second_per_l_mito_per_molar_per_molar {pub: in};
    var K_CK: per_molar {pub: in};
    var ATP_c: molar {pub: in};
    var ADP_c: molar {pub: in};
    var H_c: molar {pub: in};
    var PCr_c: molar {pub: in};
    var Cr_c: molar {pub: in};
    J_CKc = X_CK*1{mito_per_cyto}*(K_CK*ADP_c*PCr_c*H_c-ATP_c*Cr_c);
  enddef;
  def map between Environment and dH_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dK_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dMg_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dNADH_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dQ_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dCox_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dATP_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dADP_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dATP_mx_dt for
    vars time and time;
  enddef;
  def map between Environment and dADP_mx_dt for
    vars time and time;
  enddef;
  def map between Environment and dPI_x_dt for
    vars time and time;
  enddef;
  def map between Environment and dATP_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dADP_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dATP_mi_dt for
    vars time and time;
  enddef;
  def map between Environment and dADP_mi_dt for
    vars time and time;
  enddef;
  def map between Environment and dAMP_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dPI_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dMg_i_dt for
    vars time and time;
  enddef;
  def map between Environment and dATP_c_dt for
    vars time and time;
  enddef;
  def map between Environment and dADP_c_dt for
    vars time and time;
  enddef;
  def map between Environment and dAMP_c_dt for
    vars time and time;
  enddef;
  def map between Environment and dATP_mc_dt for
    vars time and time;
  enddef;
  def map between Environment and dADP_mc_dt for
    vars time and time;
  enddef;
  def map between Environment and dPI_c_dt for
    vars time and time;
  enddef;
  def map between Environment and dMg_c_dt for
    vars time and time;
  enddef;
  def map between Environment and dPCr_c_dt for
    vars time and time;
  enddef;
  def map between Environment and ddeltaPsi_dt for
    vars time and time;
  enddef;
  def map between Environment and J_C4 for
    vars O2_x and O2_x;
  enddef;
  def map between Environment and J_AtC for
    vars X_AtC and X_AtC;
  enddef;
  def map between dH_x_dt and J_DH for
    vars J_DH and J_DH;
  enddef;
  def map between dH_x_dt and J_C1 for
    vars J_C1 and J_C1;
  enddef;
  def map between dH_x_dt and J_C3 for
    vars J_C3 and J_C3;
  enddef;
  def map between dH_x_dt and J_C4 for
    vars J_C4 and J_C4;
  enddef;
  def map between dH_x_dt and J_F1 for
    vars J_F1 and J_F1;
  enddef;
  def map between dH_x_dt and J_PI1 for
    vars H_x and H_x;
    vars J_PI1 and J_PI1;
  enddef;
  def map between dH_x_dt and J_Hle for
    vars H_x and H_x;
    vars J_Hle and J_Hle;
  enddef;
  def map between dH_x_dt and J_KH for
    vars H_x and H_x;
    vars J_KH and J_KH;
  enddef;
  def map between dK_x_dt and J_KH for
    vars K_x and K_x;
    vars J_KH and J_KH;
  enddef;
  def map between dK_x_dt and J_K for
    vars K_x and K_x;
    vars J_K and J_K;
  enddef;
  def map between dMg_x_dt and J_MgATP_x for
    vars Mg_x and Mg_x;
    vars J_MgATP_x and J_MgATP_x;
  enddef;
  def map between dMg_x_dt and J_MgADP_x for
    vars Mg_x and Mg_x;
    vars J_MgADP_x and J_MgADP_x;
  enddef;
  def map between dNADH_x_dt and J_DH for
    vars NADH_x and NADH_x;
    vars J_DH and J_DH;
  enddef;
  def map between dNADH_x_dt and J_C1 for
    vars NADH_x and NADH_x;
    vars J_C1 and J_C1;
  enddef;
  def map between dQ_x_dt and J_C1 for
    vars Q_x and Q_x;
    vars J_C1 and J_C1;
  enddef;
  def map between dQH2_x_dt and J_C1 for
    vars QH2_x and QH2_x;
  enddef;
  def map between dQ_x_dt and J_C3 for
    vars Q_x and Q_x;
    vars J_C3 and J_C3;
  enddef;
  def map between dQH2_x_dt and J_C3 for
    vars QH2_x and QH2_x;
  enddef;
  def map between dCox_x_dt and J_C3 for
    vars Cox_x and Cox_x;
    vars J_C3 and J_C3;
  enddef;
  def map between dCox_x_dt and J_C4 for
    vars Cox_x and Cox_x;
    vars J_C4 and J_C4;
  enddef;
  def map between dATP_mx_dt and J_F1 for
    vars ATP_mx and ATP_mx;
  enddef;
  def map between dATP_x_dt and J_F1 for
    vars J_F1 and J_F1;
  enddef;
  def map between dATP_x_dt and J_ANT for
    vars J_ANT and J_ANT;
  enddef;
  def map between dADP_x_dt and J_F1 for
    vars J_F1 and J_F1;
  enddef;
  def map between dADP_mx_dt and J_F1 for
    vars ADP_mx and ADP_mx;
  enddef;
  def map between dADP_x_dt and J_ANT for
    vars J_ANT and J_ANT;
  enddef;
  def map between dATP_mx_dt and J_MgATP_x for
    vars ATP_mx and ATP_mx;
    vars J_MgATP_x and J_MgATP_x;
  enddef;
  def map between dADP_mx_dt and J_MgADP_x for
    vars ADP_mx and ADP_mx;
    vars J_MgADP_x and J_MgADP_x;
  enddef;
  def map between dPI_x_dt and J_F1 for
    vars PI_x and PI_x;
    vars J_F1 and J_F1;
  enddef;
  def map between dPI_x_dt and J_PI1 for
    vars PI_x and PI_x;
    vars J_PI1 and J_PI1;
  enddef;
  def map between dATP_i_dt and J_ATP for
    vars ATP_i and ATP_i;
    vars J_ATP and J_ATP;
  enddef;
  def map between dATP_i_dt and J_ANT for
    vars J_ANT and J_ANT;
  enddef;
  def map between dATP_i_dt and J_AKi for
    vars ATP_i and ATP_i;
    vars J_AKi and J_AKi;
  enddef;
  def map between dADP_i_dt and J_ADP for
    vars ADP_i and ADP_i;
    vars J_ADP and J_ADP;
  enddef;
  def map between dADP_i_dt and J_ANT for
    vars J_ANT and J_ANT;
  enddef;
  def map between dADP_i_dt and J_AKi for
    vars ADP_i and ADP_i;
    vars J_AKi and J_AKi;
  enddef;
  def map between dAMP_i_dt and J_AMP for
    vars AMP_i and AMP_i;
    vars J_AMP and J_AMP;
  enddef;
  def map between dAMP_i_dt and J_AKi for
    vars AMP_i and AMP_i;
    vars J_AKi and J_AKi;
  enddef;
  def map between dATP_mi_dt and J_MgATP_i for
    vars ATP_mi and ATP_mi;
    vars J_MgATP_i and J_MgATP_i;
  enddef;
  def map between dADP_mi_dt and J_MgADP_i for
    vars ADP_mi and ADP_mi;
    vars J_MgADP_i and J_MgADP_i;
  enddef;
  def map between dPI_i_dt and J_PI1 for
    vars PI_i and PI_i;
    vars J_PI1 and J_PI1;
  enddef;
  def map between dPI_i_dt and J_PI2 for
    vars PI_i and PI_i;
    vars J_PI2 and J_PI2;
  enddef;
  def map between dMg_i_dt and J_MgATP_i for
    vars Mg_i and Mg_i;
    vars J_MgATP_i and J_MgATP_i;
  enddef;
  def map between dMg_i_dt and J_MgADP_i for
    vars Mg_i and Mg_i;
    vars J_MgADP_i and J_MgADP_i;
  enddef;
  def map between dATP_c_dt and J_ATP for
    vars ATP_c and ATP_c;
    vars J_ATP and J_ATP;
  enddef;
  def map between dATP_c_dt and J_AKc for
    vars ATP_c and ATP_c;
    vars J_AKc and J_AKc;
  enddef;
  def map between dATP_c_dt and J_AtC for
    vars J_AtC and J_AtC;
  enddef;
  def map between dATP_c_dt and J_CKc for
    vars ATP_c and ATP_c;
    vars J_CKc and J_CKc;
  enddef;
  def map between dADP_c_dt and J_ADP for
    vars ADP_c and ADP_c;
    vars J_ADP and J_ADP;
  enddef;
  def map between dADP_c_dt and J_AKc for
    vars ADP_c and ADP_c;
    vars J_AKc and J_AKc;
  enddef;
  def map between dADP_c_dt and J_AtC for
    vars J_AtC and J_AtC;
  enddef;
  def map between dADP_c_dt and J_CKc for
    vars ADP_c and ADP_c;
    vars J_CKc and J_CKc;
  enddef;
  def map between dAMP_c_dt and J_AMP for
    vars AMP_c and AMP_c;
    vars J_AMP and J_AMP;
  enddef;
  def map between dAMP_c_dt and J_AKc for
    vars AMP_c and AMP_c;
    vars J_AKc and J_AKc;
  enddef;
  def map between dATP_mc_dt and J_MgATP_c for
    vars ATP_mc and ATP_mc;
    vars J_MgATP_c and J_MgATP_c;
  enddef;
  def map between dADP_mc_dt and J_MgADP_c for
    vars ADP_mc and ADP_mc;
    vars J_MgADP_c and J_MgADP_c;
  enddef;
  def map between dPI_c_dt and J_PI2 for
    vars PI_c and PI_c;
    vars J_PI2 and J_PI2;
  enddef;
  def map between dPI_c_dt and J_AtC for
    vars J_AtC and J_AtC;
  enddef;
  def map between dMg_c_dt and J_MgATP_c for
    vars Mg_c and Mg_c;
    vars J_MgATP_c and J_MgATP_c;
  enddef;
  def map between dMg_c_dt and J_MgADP_c for
    vars Mg_c and Mg_c;
    vars J_MgADP_c and J_MgADP_c;
  enddef;
  def map between dPCr_c_dt and J_CKc for
    vars PCr_c and PCr_c;
    vars J_CKc and J_CKc;
  enddef;
  def map between ddeltaPsi_dt and J_C1 for
    vars J_C1 and J_C1;
  enddef;
  def map between ddeltaPsi_dt and J_C3 for
    vars deltaPsi and deltaPsi;
    vars J_C3 and J_C3;
  enddef;
  def map between ddeltaPsi_dt and J_C4 for
    vars deltaPsi and deltaPsi;
    vars J_C4 and J_C4;
  enddef;
  def map between ddeltaPsi_dt and J_F1 for
    vars deltaPsi and deltaPsi;
    vars J_F1 and J_F1;
  enddef;
  def map between ddeltaPsi_dt and J_ANT for
    vars deltaPsi and deltaPsi;
    vars J_ANT and J_ANT;
  enddef;
  def map between ddeltaPsi_dt and J_Hle for
    vars deltaPsi and deltaPsi;
    vars J_Hle and J_Hle;
  enddef;
  def map between ddeltaPsi_dt and J_K for
    vars deltaPsi and deltaPsi;
    vars J_K and J_K;
  enddef;
  def map between fixed_parameters and J_C1 for
    vars dG_C1op and dG_C1op;
    vars dG_H and dG_H;
    vars RT and RT;
  enddef;
  def map between fixed_parameters and J_C3 for
    vars dG_C3op and dG_C3op;
    vars dG_H and dG_H;
    vars RT and RT;
    vars F and F;
  enddef;
  def map between fixed_parameters and J_C4 for
    vars dG_C4op and dG_C4op;
    vars dG_H and dG_H;
    vars RT and RT;
    vars F and F;
    vars C_tot and C_tot;
  enddef;
  def map between fixed_parameters and J_F1 for
    vars dG_F1o and dG_F1o;
    vars dG_H and dG_H;
    vars RT and RT;
    vars F and F;
    vars n_A and n_A;
    vars K_DD and K_DD;
    vars K_DT and K_DT;
  enddef;
  def map between fixed_parameters and ddeltaPsi_dt for
    vars deltaPsi and deltaPsi;
    vars n_A and n_A;
  enddef;
  def map between fixed_parameters and dH_x_dt for
    vars H_x and H_x;
    vars n_A and n_A;
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dK_x_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dMg_x_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dNADH_x_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dQ_x_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dCox_x_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dATP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dATP_mx_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dADP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dADP_mx_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dPI_x_dt for
    vars W_x and W_x;
  enddef;
  def map between fixed_parameters and dATP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between fixed_parameters and dADP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between fixed_parameters and dAMP_i_dt for
    vars W_i and W_i;
  enddef;
  def map between fixed_parameters and dATP_mi_dt for
    vars W_i and W_i;
  enddef;
  def map between fixed_parameters and dADP_mi_dt for
    vars W_i and W_i;
  enddef;
  def map between fixed_parameters and dPI_i_dt for
    vars W_i and W_i;
  enddef;
  def map between fixed_parameters and dMg_i_dt for
    vars W_i and W_i;
  enddef;
  def map between fixed_parameters and dATP_c_dt for
    vars W_c and W_c;
    vars Rm_cyto and Rm_cyto;
    vars Rc_cell and Rc_cell;
  enddef;
  def map between fixed_parameters and dADP_c_dt for
    vars W_c and W_c;
    vars Rm_cyto and Rm_cyto;
    vars Rc_cell and Rc_cell;
  enddef;
  def map between fixed_parameters and dAMP_c_dt for
    vars W_c and W_c;
    vars Rm_cyto and Rm_cyto;
  enddef;
  def map between fixed_parameters and dATP_mc_dt for
    vars W_c and W_c;
  enddef;
  def map between fixed_parameters and dADP_mc_dt for
    vars W_c and W_c;
  enddef;
  def map between fixed_parameters and dPI_c_dt for
    vars W_c and W_c;
    vars Rm_cyto and Rm_cyto;
    vars Rc_cell and Rc_cell;
  enddef;
  def map between fixed_parameters and dMg_c_dt for
    vars W_c and W_c;
  enddef;
  def map between adjustable_parameters and ddeltaPsi_dt for
    vars C_IM and C_IM;
  enddef;
  def map between adjustable_parameters and dH_x_dt for
    vars x_buff and x_buff;
  enddef;
  def map between dNAD_x_dt and fixed_parameters for
    vars NAD_tot and NAD_tot;
  enddef;
  def map between dNAD_x_dt and dNADH_x_dt for
    vars NADH_x and NADH_x;
  enddef;
  def map between dQH2_x_dt and fixed_parameters for
    vars Q_tot and Q_tot;
  enddef;
  def map between dQH2_x_dt and dQ_x_dt for
    vars Q_x and Q_x;
  enddef;
  def map between dCred_x_dt and fixed_parameters for
    vars C_tot and C_tot;
  enddef;
  def map between dCred_x_dt and dCox_x_dt for
    vars Cox_x and Cox_x;
  enddef;
  def map between dATP_fx_dt and dATP_x_dt for
    vars ATP_x and ATP_x;
  enddef;
  def map between dATP_fx_dt and dATP_mx_dt for
    vars ATP_mx and ATP_mx;
  enddef;
  def map between dADP_fx_dt and dADP_x_dt for
    vars ADP_x and ADP_x;
  enddef;
  def map between dADP_fx_dt and dADP_mx_dt for
    vars ADP_mx and ADP_mx;
  enddef;
  def map between dATP_fi_dt and dATP_i_dt for
    vars ATP_i and ATP_i;
  enddef;
  def map between dATP_fi_dt and dATP_mi_dt for
    vars ATP_mi and ATP_mi;
  enddef;
  def map between dADP_fi_dt and dADP_i_dt for
    vars ADP_i and ADP_i;
  enddef;
  def map between dADP_fi_dt and dADP_mi_dt for
    vars ADP_mi and ADP_mi;
  enddef;
  def map between dATP_fc_dt and dATP_c_dt for
    vars ATP_c and ATP_c;
  enddef;
  def map between dATP_fc_dt and dATP_mc_dt for
    vars ATP_mc and ATP_mc;
  enddef;
  def map between dADP_fc_dt and dADP_c_dt for
    vars ADP_c and ADP_c;
  enddef;
  def map between dADP_fc_dt and dADP_mc_dt for
    vars ADP_mc and ADP_mc;
  enddef;
  def map between dAMP_i_dt and J_ANT for
    vars J_ANT and J_ANT;
  enddef;
  def map between dPCr_c_dt and fixed_parameters for
    vars W_c and W_c;
  enddef;
  def map between dPCr_c_dt and dCr_c_dt for
    vars PCr_c and PCr_c;
  enddef;
  def map between dCr_c_dt and fixed_parameters for
    vars CR_tot and CR_tot;
  enddef;
  def map between J_DH and adjustable_parameters for
    vars X_DH and X_DH;
    vars r and r;
    vars k_PI1 and k_PI1;
    vars k_PI2 and k_PI2;
  enddef;
  def map between J_DH and dNAD_x_dt for
    vars NAD_x and NAD_x;
  enddef;
  def map between J_DH and dPI_x_dt for
    vars PI_x and PI_x;
  enddef;
  def map between J_C1 and adjustable_parameters for
    vars X_C1 and X_C1;
    vars k_PI1 and k_PI1;
    vars k_PI2 and k_PI2;
  enddef;
  def map between J_C3 and adjustable_parameters for
    vars X_C3 and X_C3;
    vars k_PI3 and k_PI3;
    vars k_PI4 and k_PI4;
  enddef;
  def map between J_C1 and dNAD_x_dt for
    vars NAD_x and NAD_x;
  enddef;
  def map between J_C3 and dCred_x_dt for
    vars Cred_x and Cred_x;
  enddef;
  def map between J_C3 and dPI_x_dt for
    vars PI_x and PI_x;
  enddef;
  def map between J_C4 and adjustable_parameters for
    vars X_C4 and X_C4;
    vars k_O2 and k_O2;
  enddef;
  def map between J_C4 and dCred_x_dt for
    vars Cred_x and Cred_x;
  enddef;
  def map between J_F1 and adjustable_parameters for
    vars X_F1 and X_F1;
  enddef;
  def map between J_ANT and adjustable_parameters for
    vars X_ANT and X_ANT;
    vars k_mADP and k_mADP;
  enddef;
  def map between J_ANT and fixed_parameters for
    vars F and F;
    vars RT and RT;
  enddef;
  def map between J_ANT and dATP_fx_dt for
    vars ATP_fx and ATP_fx;
  enddef;
  def map between J_ANT and dADP_fx_dt for
    vars ADP_fx and ADP_fx;
  enddef;
  def map between J_ANT and dATP_fi_dt for
    vars ATP_fi and ATP_fi;
  enddef;
  def map between J_ANT and dADP_fi_dt for
    vars ADP_fi and ADP_fi;
  enddef;
  def map between J_PI1 and adjustable_parameters for
    vars X_PI1 and X_PI1;
    vars k_PIH and k_PIH;
  enddef;
  def map between J_PI1 and fixed_parameters for
    vars k_dHPI and k_dHPI;
    vars H_i and H_i;
  enddef;
  def map between J_Hle and fixed_parameters for
    vars F and F;
    vars RT and RT;
    vars H_i and H_i;
  enddef;
  def map between J_Hle and adjustable_parameters for
    vars X_Hle and X_Hle;
  enddef;
  def map between J_Hle and dPI_i_dt for
    vars PI_i and PI_i;
  enddef;
  def map between J_Hle and dPI_x_dt for
    vars PI_x and PI_x;
  enddef;
  def map between J_KH and fixed_parameters for
    vars K_i and K_i;
    vars H_i and H_i;
  enddef;
  def map between J_KH and adjustable_parameters for
    vars X_KH and X_KH;
  enddef;
  def map between J_K and fixed_parameters for
    vars K_i and K_i;
    vars RT and RT;
    vars F and F;
  enddef;
  def map between J_K and adjustable_parameters for
    vars X_K and X_K;
  enddef;
  def map between J_AMP and adjustable_parameters for
    vars gamma and gamma;
    vars X_A and X_A;
  enddef;
  def map between J_ADP and adjustable_parameters for
    vars gamma and gamma;
    vars X_A and X_A;
  enddef;
  def map between J_ATP and adjustable_parameters for
    vars gamma and gamma;
    vars X_A and X_A;
  enddef;
  def map between J_PI2 and adjustable_parameters for
    vars gamma and gamma;
    vars X_PI2 and X_PI2;
  enddef;
  def map between J_MgATP_x and adjustable_parameters for
    vars X_MgA and X_MgA;
  enddef;
  def map between J_MgATP_x and fixed_parameters for
    vars K_DT and K_DT;
  enddef;
  def map between J_MgATP_x and dATP_fx_dt for
    vars ATP_fx and ATP_fx;
  enddef;
  def map between J_MgADP_x and adjustable_parameters for
    vars X_MgA and X_MgA;
  enddef;
  def map between J_MgADP_x and fixed_parameters for
    vars K_DD and K_DD;
  enddef;
  def map between J_MgADP_x and dADP_fx_dt for
    vars ADP_fx and ADP_fx;
  enddef;
  def map between J_MgATP_i and adjustable_parameters for
    vars X_MgA and X_MgA;
  enddef;
  def map between J_MgATP_i and fixed_parameters for
    vars K_DT and K_DT;
  enddef;
  def map between J_MgATP_i and dATP_fi_dt for
    vars ATP_fi and ATP_fi;
  enddef;
  def map between J_MgADP_i and adjustable_parameters for
    vars X_MgA and X_MgA;
  enddef;
  def map between J_MgADP_i and fixed_parameters for
    vars K_DD and K_DD;
  enddef;
  def map between J_MgADP_i and dADP_fi_dt for
    vars ADP_fi and ADP_fi;
  enddef;
  def map between J_MgATP_c and adjustable_parameters for
    vars X_MgA and X_MgA;
  enddef;
  def map between J_MgATP_c and fixed_parameters for
    vars K_DT and K_DT;
  enddef;
  def map between J_MgATP_c and dATP_fc_dt for
    vars ATP_fc and ATP_fc;
  enddef;
  def map between J_MgADP_c and adjustable_parameters for
    vars X_MgA and X_MgA;
  enddef;
  def map between J_MgADP_c and fixed_parameters for
    vars K_DD and K_DD;
  enddef;
  def map between J_MgADP_c and dADP_fc_dt for
    vars ADP_fc and ADP_fc;
  enddef;
  def map between J_AKi and adjustable_parameters for
    vars X_AK and X_AK;
  enddef;
  def map between J_AKi and fixed_parameters for
    vars K_AK and K_AK;
  enddef;
  def map between J_AKc and adjustable_parameters for
    vars X_AK and X_AK;
  enddef;
  def map between J_AKc and fixed_parameters for
    vars K_AK and K_AK;
  enddef;
  def map between J_CKc and adjustable_parameters for
    vars X_CK and X_CK;
  enddef;
  def map between J_CKc and fixed_parameters for
    vars K_CK and K_CK;
    vars H_c and H_c;
  enddef;
  def map between J_CKc and dCr_c_dt for
    vars Cr_c and Cr_c;
  enddef;
enddef;
