<?xml version="1.0"?>
<!--
This CellML file was generated on 9/7/2011 at 12:26:16 at PM using:

COR (0.9.31.1409)
Copyright 2002-2011 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="gerard_gonze_goldbeter_2009" name="gerard_gonze_goldbeter_2009">
   <units name="minute">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="hour">
      <unit multiplier="60" units="minute"/>
   </units>
   <units name="per_hour">
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="nanomole">
      <unit prefix="nano" units="mole"/>
   </units>
   <units name="nanomolar">
      <unit units="nanomole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="nanomolar_per_hour">
      <unit units="nanomolar"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="hour"/>
   </component>
   <component name="Z">
      <variable cmeta:id="Z_Z" initial_value="1.712" name="Z" public_interface="out" units="nanomolar"/>
      <variable name="Y" public_interface="in" units="nanomolar"/>
      <variable initial_value="1" name="k_3" units="per_hour"/>
      <variable initial_value="0.2" name="k_6" units="per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Z</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k_3</ci>
                  <ci>Y</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k_6</ci>
                  <ci>Z</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Y">
      <variable cmeta:id="Y_Y" initial_value="1.811e-1" name="Y" public_interface="out" units="nanomolar"/>
      <variable name="Z" public_interface="in" units="nanomolar"/>
      <variable name="X" public_interface="in" units="nanomolar"/>
      <variable initial_value="1" name="k_2" units="per_hour"/>
      <variable initial_value="0.2" name="k_5" units="per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Y</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k_2</ci>
                  <ci>X</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k_5</ci>
                  <ci>Y</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="X">
      <variable cmeta:id="X_X" initial_value="3.931e-2" name="X" public_interface="out" units="nanomolar"/>
      <variable name="Z" public_interface="in" units="nanomolar"/>
      <variable initial_value="1" name="K_I" units="nanomolar"/>
      <variable initial_value="1" name="k_1" units="nanomolar_per_hour"/>
      <variable initial_value="0.2" name="k_4" units="per_hour"/>
      <variable initial_value="9" name="n" units="dimensionless"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>X</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k_1</ci>
                  <apply>
                     <divide/>
                     <apply>
                        <power/>
                        <ci>K_I</ci>
                        <ci>n</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <power/>
                           <ci>K_I</ci>
                           <ci>n</ci>
                        </apply>
                        <apply>
                           <power/>
                           <ci>Z</ci>
                           <ci>n</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k_4</ci>
                  <ci>X</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="X"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="Y"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="Z"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="X" component_2="Y"/>
      <map_variables variable_1="X" variable_2="X"/>
   </connection>
   <connection>
      <map_components component_1="X" component_2="Z"/>
      <map_variables variable_1="Z" variable_2="Z"/>
   </connection>
   <connection>
      <map_components component_1="Y" component_2="Z"/>
      <map_variables variable_1="Y" variable_2="Y"/>
      <map_variables variable_1="Z" variable_2="Z"/>
   </connection>
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><rdf:Description rdf:nodeID="n1"><endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">60</endingValue></rdf:Description><rdf:Description rdf:nodeID="n2"><boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n3"/></boundIntervals></rdf:Description><rdf:Description rdf:about="#gerard_gonze_goldbeter_2009"><simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n2"/></simulation></rdf:Description><rdf:Description rdf:nodeID="n3"><rdf:rest><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/></rdf:rest><rdf:first><rdf:Description rdf:nodeID="n1"/></rdf:first></rdf:Description></rdf:RDF></model>