<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 8/02/2010 at 11:07:15 at a.m. using:

COR (0.9.31.1333)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="komarova_2003" cmeta:id="komarova_2003" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Evolutionary dynamics of mutator phenotypes in cancer: implications for chemotherapy</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This is the CellML description of the simple version of the model detailed in the paper. The model runs in both OpenCell and COR and the units are consistent, however it does not reproduce the correct published results as some of the parameter values are unknown.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>ABSTRACT: Genetic instability is a central characteristic of cancers. However, the selective forces responsible for the emergence of genetic instability are not clear. We use mathematical models to determine the conditions under which selection favors instability, and when stable cells are advantageous. We take into account the processes of DNA damage, repair, cell cycle arrest, mutation, and death. We find that the rate of DNA damage can play a major role in this context. In particular, an increase in the rate of DNA damage can reverse the relative fitness of stable and unstable cells. In terms of cancer progression, we find the following results. If cells have intact apoptotic responses, stable cells prevail if the DNA hit rate is low. A high DNA hit rate can result in the selection of genetically unstable cells. This has implications for the induction of tumors by carcinogens. On the other hand, if cells are characterized by impaired apoptosis, we observe the opposite. Genetic instability is selected for if the DNA hit rate is low. A high DNA hit rate can select against instability and result in the persistence of stable cells. We propose that chemotherapy can be used to reverse the relative fitness of stable and unstable cells, such that unstable cells are the inferior competitors. This could result in the competitive exclusion of progressing cancer cells.
</para>
				
				<para>
The original paper reference is cited below:
</para>
				<para>
Evolutionary dynamics of mutator phenotypes in cancer: implications for chemotherapy, Natalia L. Komarova and Dominik Wodarz, 2003,<emphasis>Cancer Research</emphasis>, 63, 6635-6642. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/14583456">PubMed ID: 14583456</ulink>
				</para>
				<informalfigure float="0" id="fig_cell_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>cell diagram</title>
							</objectinfo>
							<imagedata fileref="komarova_2003.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the model, showing the processes of cell reproduction, DNA damage, repair, cell cycle arrest, mutation and death.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Description rdf:about="#S">
			<dc:title>S</dc:title>
			<dcterms:alternative>stable cells</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Description rdf:about="#M">
			<dc:title>M</dc:title>
			<dcterms:alternative>mutator cells</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Description rdf:about="#phi">
			<dc:title>phi</dc:title>
			<dcterms:alternative>average fitness</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Bag rdf:about="rdf:#5e8caade-d629-4e9b-8ad4-df6a7f004e4b">
			<rdf:li>evolutionary dynamics</rdf:li>
			<rdf:li>immunology</rdf:li>
			<rdf:li>pharmacology</rdf:li>
			<rdf:li>cancer</rdf:li>
		</rdf:Bag>
		<rdf:Seq rdf:about="rdf:#0f7de1c3-1702-4685-9ba4-713fe3d70608">
			<rdf:li rdf:resource="rdf:#8fe05bde-27c0-4feb-ad8d-0722f25ff5dd"/>
			<rdf:li rdf:resource="rdf:#e573c3e7-c1ed-4fd8-aeb3-4b05748775f9"/>
		</rdf:Seq>
		<rdf:Description rdf:about="rdf:#09308883-8f6d-4160-9c3f-5bfa6755b7c2">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value rdf:resource="rdf:#5e8caade-d629-4e9b-8ad4-df6a7f004e4b"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#99d489ab-638b-4604-bff8-39d4cf10a146">
			<dc:title>
              Cancer Research
            </dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3c99c0c6-d228-46ca-8cd3-037d9a1eea6f">
			<vCard:Given>Natalia</vCard:Given>
			<vCard:Family>Komarova</vCard:Family>
			<vCard:Other>L</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="#komarova_2003">
			<dc:title>
        Komarova and Wodarz's 2003 mathematical model of the evolutionary 
        dynamics of mutator phenotypes in cancer.
      </dc:title>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#5ec506a9-8ca9-454e-ac83-4286438e6308"/>
			<bqs:reference rdf:resource="rdf:#07538767-cf91-449d-80b3-7ba48448e9f9"/>
			<bqs:reference rdf:resource="rdf:#5fd85bbb-ddbc-4052-a8d9-9d6992610749"/>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:title>Evolutionary dynamics of mutator phenotypes in cancer: implications for chemotherapy (Simple Model)</dc:title>
			<dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
			<dcterms:created rdf:resource="rdf:#4c921134-eb65-455e-aef3-9cbc5a39a2ee"/>
			<dc:creator rdf:resource="rdf:#ce783ffc-221e-400f-b475-03b2fd60f9c6"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#8fe05bde-27c0-4feb-ad8d-0722f25ff5dd">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#3c99c0c6-d228-46ca-8cd3-037d9a1eea6f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#07538767-cf91-449d-80b3-7ba48448e9f9">
			<dc:subject rdf:resource="rdf:#09308883-8f6d-4160-9c3f-5bfa6755b7c2"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#45be9659-1fc5-4830-953c-83b508c2973e">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4c921134-eb65-455e-aef3-9cbc5a39a2ee">
			<dcterms:W3CDTF>2003-12-18</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ab358646-4b04-4ed5-9dd4-80ff649d4733">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#8462a2bb-61a2-4f9e-bc61-24bf3a481c94">
			<dcterms:W3CDTF>2003-10-15</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e573c3e7-c1ed-4fd8-aeb3-4b05748775f9">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#70face61-32d2-46dd-bd50-52d67759952f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ce783ffc-221e-400f-b475-03b2fd60f9c6">
			<vCard:ORG rdf:resource="rdf:#f24fcca9-a128-4e51-9677-4ac3ec276f22"/>
			<vCard:EMAIL rdf:resource="rdf:#10cf5f8b-027e-481c-a9d6-dae7d42a756b"/>
			<vCard:N rdf:resource="rdf:#ab358646-4b04-4ed5-9dd4-80ff649d4733"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#5fd85bbb-ddbc-4052-a8d9-9d6992610749">
			<bqs:Pubmed_id>14583456</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#ba4e327a-1062-4a78-8b13-80ea17e41a67"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#5ec506a9-8ca9-454e-ac83-4286438e6308">
			<dc:creator rdf:resource="rdf:#45be9659-1fc5-4830-953c-83b508c2973e"/>
			<rdf:value>
          This is the CellML description of Komarova and Wodarz's 2003 
          mathematical model of the evolutionary dynamics of mutator phenotypes 
          in cancer.
        </rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f24fcca9-a128-4e51-9677-4ac3ec276f22">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#70face61-32d2-46dd-bd50-52d67759952f">
			<vCard:Given>Dominik</vCard:Given>
			<vCard:Family>Wodarz</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#10cf5f8b-027e-481c-a9d6-dae7d42a756b">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ba4e327a-1062-4a78-8b13-80ea17e41a67">
			<dc:creator rdf:resource="rdf:#0f7de1c3-1702-4685-9ba4-713fe3d70608"/>
			<dc:title>
            Evolutionary Dynamics of Mutator Phenotypes in Cancer: Implications for Chemotherapy
          </dc:title>
			<bqs:volume>63</bqs:volume>
			<bqs:first_page>6635</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#99d489ab-638b-4604-bff8-39d4cf10a146"/>
			<dcterms:issued rdf:resource="rdf:#8462a2bb-61a2-4f9e-bc61-24bf3a481c94"/>
			<bqs:last_page>6642</bqs:last_page>
		</rdf:Description>
	</rdf:RDF>   
	
	<units xmlns="http://www.cellml.org/cellml/1.0#" name="hour">
      <unit units="second" multiplier="3600"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="first_order_rate_constant">
      <unit units="hour" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_time2">
      <unit units="hour" exponent="-2"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_time3">
      <unit units="hour" exponent="-3"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="hour" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="S" cmeta:id="S">
      <variable name="S" units="dimensionless" initial_value="0.5" public_interface="out"/>
      <variable name="rs" units="first_order_rate_constant" public_interface="in"/>
      <variable name="epsilon_s" units="first_order_rate_constant" public_interface="in"/>
      <variable name="alpha" units="first_order_rate_constant" public_interface="in"/>
      <variable name="u" units="first_order_rate_constant" public_interface="in"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="phi" units="dimensionless" public_interface="in"/>
      <variable name="time" units="hour" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>S</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>rs</ci>
                     <ci>S</ci>
                     <apply>
                        <plus/>
                        <apply>
                           <minus/>
                           <cn cellml:units="dimensionless">1</cn>
                           <apply>
                              <times/>
                              <ci>u</ci>
                              <cn cellml:units="hour">1</cn>
                           </apply>
                        </apply>
                        <apply>
                           <divide/>
                           <apply>
                              <times/>
                              <ci>beta</ci>
                              <ci>epsilon_s</ci>
                              <ci>u</ci>
                           </apply>
                           <cn cellml:units="per_time3">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>alpha</ci>
                           <ci>u</ci>
                           <ci>rs</ci>
                           <ci>S</ci>
                        </apply>
                        <cn cellml:units="per_time3">1</cn>
                     </apply>
                     <apply>
                        <minus/>
                        <cn cellml:units="first_order_rate_constant">1</cn>
                        <ci>epsilon_s</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>phi</ci>
                  <ci>S</ci>
                  <cn cellml:units="first_order_rate_constant">1</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="M" cmeta:id="M">
      <variable name="M" units="dimensionless" initial_value="0.5" public_interface="out"/>
      <variable name="rm" units="first_order_rate_constant" public_interface="in"/>
      <variable name="epsilon_m" units="first_order_rate_constant" public_interface="in"/>
      <variable name="alpha" units="first_order_rate_constant" public_interface="in"/>
      <variable name="u" units="first_order_rate_constant" public_interface="in"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="phi" units="dimensionless" public_interface="in"/>
      <variable name="time" units="hour" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>M</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>rm</ci>
                     <ci>M</ci>
                     <apply>
                        <plus/>
                        <apply>
                           <minus/>
                           <cn cellml:units="dimensionless">1</cn>
                           <apply>
                              <divide/>
                              <ci>u</ci>
                              <cn cellml:units="first_order_rate_constant">1</cn>
                           </apply>
                        </apply>
                        <apply>
                           <divide/>
                           <apply>
                              <times/>
                              <ci>beta</ci>
                              <ci>epsilon_m</ci>
                              <ci>u</ci>
                           </apply>
                           <cn cellml:units="per_time3">1</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>alpha</ci>
                           <ci>u</ci>
                           <ci>rm</ci>
                           <ci>M</ci>
                        </apply>
                        <cn cellml:units="per_time3">1</cn>
                     </apply>
                     <apply>
                        <minus/>
                        <cn cellml:units="first_order_rate_constant">1</cn>
                        <ci>epsilon_m</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>phi</ci>
                  <ci>M</ci>
                  <cn cellml:units="first_order_rate_constant">1</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="phi" cmeta:id="phi">
      <variable name="phi" units="dimensionless" public_interface="out"/>
      <variable name="alpha" units="first_order_rate_constant" public_interface="in"/>
      <variable name="u" units="first_order_rate_constant" public_interface="in"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="S" units="dimensionless" public_interface="in"/>
      <variable name="M" units="dimensionless" public_interface="in"/>
      <variable name="rs" units="first_order_rate_constant" public_interface="in"/>
      <variable name="rm" units="first_order_rate_constant" public_interface="in"/>
      <variable name="epsilon_s" units="first_order_rate_constant" public_interface="in"/>
      <variable name="epsilon_m" units="first_order_rate_constant" public_interface="in"/>
      <variable name="growth_rate" units="first_order_rate_constant"/>
      <variable name="a" units="first_order_rate_constant" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>phi</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>S</ci>
                        <ci>rs</ci>
                     </apply>
                     <cn cellml:units="first_order_rate_constant">1</cn>
                  </apply>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <apply>
                           <divide/>
                           <ci>u</ci>
                           <cn cellml:units="first_order_rate_constant">1</cn>
                        </apply>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <cn cellml:units="dimensionless">1</cn>
                              <apply>
                                 <divide/>
                                 <apply>
                                    <times/>
                                    <ci>beta</ci>
                                    <ci>epsilon_s</ci>
                                 </apply>
                                 <cn cellml:units="per_time2">1</cn>
                              </apply>
                           </apply>
                           <apply>
                              <times/>
                              <apply>
                                 <divide/>
                                 <ci>alpha</ci>
                                 <cn cellml:units="first_order_rate_constant">1</cn>
                              </apply>
                              <apply>
                                 <minus/>
                                 <cn cellml:units="dimensionless">1</cn>
                                 <apply>
                                    <divide/>
                                    <ci>epsilon_s</ci>
                                    <cn cellml:units="first_order_rate_constant">1</cn>
                                 </apply>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>M</ci>
                        <ci>rm</ci>
                     </apply>
                     <cn cellml:units="first_order_rate_constant">1</cn>
                  </apply>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <apply>
                           <divide/>
                           <ci>u</ci>
                           <cn cellml:units="first_order_rate_constant">1</cn>
                        </apply>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <cn cellml:units="dimensionless">1</cn>
                              <apply>
                                 <divide/>
                                 <apply>
                                    <times/>
                                    <ci>beta</ci>
                                    <ci>epsilon_m</ci>
                                 </apply>
                                 <cn cellml:units="per_time2">1</cn>
                              </apply>
                           </apply>
                           <apply>
                              <times/>
                              <apply>
                                 <divide/>
                                 <ci>alpha</ci>
                                 <cn cellml:units="first_order_rate_constant">1</cn>
                              </apply>
                              <apply>
                                 <minus/>
                                 <cn cellml:units="dimensionless">1</cn>
                                 <apply>
                                    <divide/>
                                    <ci>epsilon_m</ci>
                                    <cn cellml:units="first_order_rate_constant">1</cn>
                                 </apply>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>growth_rate</ci>
            <apply>
               <times/>
               <apply>
                  <plus/>
                  <ci>rs</ci>
                  <ci>rm</ci>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <divide/>
                     <ci>a</ci>
                     <cn cellml:units="first_order_rate_constant">1</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="kinetic_parameters">
      <variable name="alpha" units="first_order_rate_constant" initial_value="0.1" public_interface="out"/>
      <variable name="u" units="first_order_rate_constant" initial_value="0.07" public_interface="out"/>
      <variable name="beta" units="first_order_rate_constant" initial_value="0.2" public_interface="out"/>
      <variable name="rm" units="first_order_rate_constant" initial_value="1.3" public_interface="out"/>
      <variable name="epsilon_m" units="first_order_rate_constant" initial_value="0.1" public_interface="out"/>
      <variable name="rs" units="first_order_rate_constant" initial_value="1" public_interface="out"/>
      <variable name="epsilon_s" units="first_order_rate_constant" initial_value="0.99" public_interface="out"/>
      <variable name="a" units="first_order_rate_constant" initial_value="0.5" public_interface="out"/>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="S" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="M" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="S" component_2="phi"/>
      <map_variables variable_1="phi" variable_2="phi"/>
      <map_variables variable_1="S" variable_2="S"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="M" component_2="phi"/>
      <map_variables variable_1="phi" variable_2="phi"/>
      <map_variables variable_1="M" variable_2="M"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="S" component_2="kinetic_parameters"/>
      <map_variables variable_1="rs" variable_2="rs"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="u" variable_2="u"/>
      <map_variables variable_1="epsilon_s" variable_2="epsilon_s"/>
      <map_variables variable_1="beta" variable_2="beta"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="M" component_2="kinetic_parameters"/>
      <map_variables variable_1="rm" variable_2="rm"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="u" variable_2="u"/>
      <map_variables variable_1="epsilon_m" variable_2="epsilon_m"/>
      <map_variables variable_1="beta" variable_2="beta"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="phi" component_2="kinetic_parameters"/>
      <map_variables variable_1="rs" variable_2="rs"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="u" variable_2="u"/>
      <map_variables variable_1="epsilon_s" variable_2="epsilon_s"/>
      <map_variables variable_1="epsilon_m" variable_2="epsilon_m"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="rm" variable_2="rm"/>
      <map_variables variable_1="a" variable_2="a"/>
   </connection>
</model>
