<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  de_paor_model_1986.xml

CREATED :  24th September 2007

LAST MODIFIED : 24th September 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of De Paor and Timmons's 1986 feedback oscillator model for circulatory autoregulation.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" cmeta:id="de_paor_model_1986" name="de_paor_model_1986_version03">

<documentation xmlns="http://cellml.org/tmp-documentation">

<article>
  <articleinfo>
  <title>A feedback oscillator model for circulatory autoregulation</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML version of the model has been checked in COR and OpenCell and the model runs to recreate the published results.  We are grateful to the model author for their assistance in getting this CellML version of their model running. A PCEnv session is also available for this model and reproduces part of Figure 5 from the publication. 
          </para>
<para>ValidateCellML confirms this model as valid CellML with full unit consistency.
</para>
  </section>
  <sect1 id="sec_structure">
  <title>Model Structure</title>

<para>
Circulatory autoregulation can be defined as the ability of an isolated organ to maintain a constant, or almost constant, blood flow rate over a range of perfusion pressures.  In the study described here Annraoi De Paor and Patrick Timmons have developed a mathematical model which is based on physiological data.  Simulation results demonstrate that autoregulation can be achieved by pressure-induced oscillations in the arteriolar radius. 
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="depaor_1986.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the De Paor et al model.</caption>
</informalfigure>

<para>
The complete original paper reference is cited below:
</para>

<para>
A feedback oscillator model for circulatory autoregulation, Annraoi M. De Paor and Patrick Timmons, 1986, 
            <emphasis>International Journal of Control</emphasis>
          , 43, 679-688.
</para>


</sect1>
</article>
</documentation> 


  <component name="environment">
    <variable units="dimensionless" public_interface="out" cmeta:id="environment_time" name="time"/>
  </component>
  
  <component cmeta:id="f" name="f">
     
    <variable units="dimensionless" public_interface="out" name="f"/>
    
    <variable units="dimensionless" name="a" initial_value="1.0"/>
    
    <variable units="dimensionless" public_interface="in" name="r"/>
    <variable units="dimensionless" public_interface="in" name="p"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> f </ci> 
        <apply>
          <times/>
          <ci> a </ci>
          <ci> p </ci>
          <apply>
            <power/>
            <ci> r </ci>
            <cn cellml:units="dimensionless"> 4.0 </cn>
          </apply>
          </apply>
      </apply>  
    </math> 
  </component>

  <component cmeta:id="r" name="r">
     
    <variable units="dimensionless" public_interface="out" cmeta:id="r_r" name="r" initial_value="0.5"/>
    
    <variable units="dimensionless" name="beta" initial_value="1.0"/>
    <variable units="dimensionless" name="alpha" initial_value="1.0"/>
    
    <variable units="dimensionless" public_interface="in" name="ur0"/>
    <variable units="dimensionless" public_interface="in" name="m"/>
    <variable units="dimensionless" public_interface="in" name="r0"/>
    <variable units="dimensionless" public_interface="in" name="p"/>
    <variable units="dimensionless" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> r </ci> 
        </apply>
        <apply>
          <times/>
          <ci> beta </ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> p </ci>
              <ci> r </ci>
            </apply>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci> alpha </ci>
                <apply>
                  <power/>
                  <apply>
                    <minus/>
                    <ci> r </ci>
                    <ci> r0 </ci>
                  </apply>
                  <cn cellml:units="dimensionless"> 2.0 </cn>
                </apply>
                <ci> ur0 </ci>
              </apply>
              <ci> m </ci>
            </apply>
          </apply>
        </apply>
      </apply>  
    </math> 
  </component>

  <component name="y"> 
    <variable units="dimensionless" public_interface="out" name="y"/>
    
    <variable units="dimensionless" public_interface="in" name="r"/>
    <variable units="dimensionless" public_interface="in" name="r1"/>
    <variable units="dimensionless" public_interface="in" name="ur1"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> y </ci> 
        <apply>
          <times/>
          <apply>
            <minus/>
            <ci> r </ci>
            <ci> r1 </ci>
          </apply>
          <ci> ur1 </ci>
        </apply>
      </apply>  
    </math> 
  </component>

  <component name="z"> 
    <variable units="dimensionless" public_interface="out" name="z"/>
    
    <variable units="dimensionless" public_interface="in" name="t1"/>
    <variable units="dimensionless" public_interface="in" name="y"/>
    <variable units="dimensionless" public_interface="in" name="x1"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> z </ci> 
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> y </ci>
            <ci> x1 </ci>
          </apply>
	  <ci> t1 </ci>
        </apply>
      </apply>  
    </math> 
  </component>

  <component name="x1"> 
    <variable units="dimensionless" public_interface="out" name="x1" initial_value="0.0"/>
    
    <variable units="dimensionless" public_interface="in" name="t1"/>
    <variable units="dimensionless" public_interface="in" name="y"/>
    <variable units="dimensionless" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> x1 </ci> 
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> y </ci>
            <ci> x1 </ci>
          </apply>
	  <ci> t1 </ci>
        </apply>
      </apply>  
    </math> 
  </component>

  <component name="q"> 
    <variable units="dimensionless" public_interface="out" name="q"/>
    
    <variable units="dimensionless" name="d" initial_value="5.0"/>
    <variable units="dimensionless" name="k" initial_value="10.5"/>
    
    <variable units="dimensionless" public_interface="in" name="z"/>
    <variable units="dimensionless" public_interface="in" name="uz"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> q </ci> 
        <apply>
          <times/>
          <ci> k </ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <exp/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci> d </ci>
                  <ci> z </ci>
                </apply>
              </apply>
            </apply>
          </apply>
          <ci> uz </ci>
        </apply>
      </apply>  
    </math> 
  </component>

  <component name="x2"> 
    <variable units="dimensionless" public_interface="out" name="x2" initial_value="0.0"/>
    
    <variable units="dimensionless" public_interface="in" name="t2"/>
    <variable units="dimensionless" public_interface="in" name="q"/>
    <variable units="dimensionless" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> x2 </ci> 
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> q </ci>
            <ci> x2 </ci>
          </apply>
	  <ci> t2 </ci>
        </apply>
      </apply>  
    </math> 
  </component>

  <component name="x3"> 
    <variable units="dimensionless" public_interface="out" name="x3" initial_value="0.0"/>
    
    <variable units="dimensionless" public_interface="in" name="t2"/>
    <variable units="dimensionless" public_interface="in" name="x2"/>
    <variable units="dimensionless" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> x3 </ci> 
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> x2 </ci>
            <ci> x3 </ci>
          </apply>
	  <ci> t2 </ci>
        </apply>
      </apply>  
    </math> 
  </component>

  <component name="m"> 
    <variable units="dimensionless" public_interface="out" name="m"/>
    
    <variable units="dimensionless" public_interface="in" name="x3"/>
    <variable units="dimensionless" public_interface="in" name="phi"/>
   
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> m </ci> 
        <apply>
          <times/>
          <ci> x3 </ci>
          <ci> phi </ci>
        </apply>
      </apply>  
    </math> 
  </component>

  <component name="phi"> 
    <variable units="dimensionless" public_interface="out" name="phi"/>
    
    <variable units="dimensionless" public_interface="in" name="r"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> phi </ci> 
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless"> 0.0 </cn>
            <apply>
              <lt/>
              <ci> r </ci>
              <cn cellml:units="dimensionless"> 0.25 </cn>
            </apply>
          </piece>
	  <piece>
            <cn cellml:units="dimensionless"> 0.0 </cn>
            <apply>
              <gt/>
              <ci> r </ci>
              <cn cellml:units="dimensionless"> 2.0 </cn>
            </apply>
          </piece>
          <otherwise>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <times/>
		<cn cellml:units="dimensionless"> 1.3061225 </cn>
                <apply>
                  <minus/>
		  <ci> r </ci>
                  <cn cellml:units="dimensionless"> 1.125 </cn>
		</apply>
		<apply>
                  <minus/>
		  <ci> r </ci>
                  <cn cellml:units="dimensionless"> 1.125 </cn>
		</apply>
              </apply>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
    </math> 
  </component>

  <component name="ur0"> 
    <variable units="dimensionless" public_interface="out" name="ur0"/>
    
    <variable units="dimensionless" public_interface="in" name="r"/>
    <variable units="dimensionless" public_interface="in" name="r0"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> ur0 </ci> 
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <gt/>
              <ci> r </ci>
              <ci> r0 </ci>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless"> 0.0 </cn>
          </otherwise>
        </piecewise>
      </apply>
    </math> 
  </component>
  
  <component name="ur1"> 
    <variable units="dimensionless" public_interface="out" name="ur1"/>
    
    <variable units="dimensionless" public_interface="in" name="r"/>
    <variable units="dimensionless" public_interface="in" name="r1"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> ur1 </ci> 
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <gt/>
              <ci> r </ci>
              <ci> r1 </ci>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless"> 0.0 </cn>
          </otherwise>
        </piecewise>
      </apply>
    </math> 
  </component>
  
  <component name="uz"> 
    <variable units="dimensionless" public_interface="out" name="uz"/>
    
    <variable units="dimensionless" public_interface="in" name="z"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> uz </ci> 
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <gt/>
              <ci> z </ci>
              <cn cellml:units="dimensionless"> 0.0 </cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless"> 0.0 </cn>
          </otherwise>
        </piecewise>
      </apply>
    </math> 
  </component>
  
  <component name="h"> 
    <variable units="dimensionless" public_interface="out" name="h" initial_value="0.0"/>
    
    <variable units="dimensionless" public_interface="in" name="t4"/>
    <variable units="dimensionless" public_interface="in" name="f"/>
    <variable units="dimensionless" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> h </ci> 
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> f </ci>
            <ci> h </ci>
          </apply>
          <ci> t4 </ci>
        </apply>
      </apply>  
    </math> 
  </component>

  <component name="model_parameters">
    <variable units="dimensionless" public_interface="out" name="r0" initial_value="0.5"/>
    <variable units="dimensionless" public_interface="out" name="r1" initial_value="1.2"/>
    <variable units="dimensionless" public_interface="out" name="t1" initial_value="0.1"/>
    <variable units="dimensionless" public_interface="out" name="t2" initial_value="0.5"/>
    <variable units="dimensionless" public_interface="out" name="t4" initial_value="20.0"/>
    <variable units="dimensionless" public_interface="out" name="p" initial_value="1.05"/>
  </component>


  <connection>
    <map_components component_2="environment" component_1="r"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="x1"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="x2"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="x3"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="h"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="r" component_1="f"/>
    <map_variables variable_2="r" variable_1="r"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="f"/>
    <map_variables variable_2="p" variable_1="p"/>
  </connection>

  <connection>
    <map_components component_2="m" component_1="r"/>
    <map_variables variable_2="m" variable_1="m"/>
  </connection>

  <connection>
    <map_components component_2="ur0" component_1="r"/>
    <map_variables variable_2="ur0" variable_1="ur0"/>
    <map_variables variable_2="r" variable_1="r"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="r"/>
    <map_variables variable_2="r0" variable_1="r0"/>
    <map_variables variable_2="p" variable_1="p"/>
  </connection>

  <connection>
    <map_components component_2="r" component_1="y"/>
    <map_variables variable_2="r" variable_1="r"/>
  </connection>

  <connection>
    <map_components component_2="ur1" component_1="y"/>
    <map_variables variable_2="ur1" variable_1="ur1"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="y"/>
    <map_variables variable_2="r1" variable_1="r1"/>
  </connection>

  <connection>
    <map_components component_2="y" component_1="z"/>
    <map_variables variable_2="y" variable_1="y"/>
  </connection>

  <connection>
    <map_components component_2="x1" component_1="z"/>
    <map_variables variable_2="x1" variable_1="x1"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="z"/>
    <map_variables variable_2="t1" variable_1="t1"/>
  </connection>

  <connection>
    <map_components component_2="y" component_1="x1"/>
    <map_variables variable_2="y" variable_1="y"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="x1"/>
    <map_variables variable_2="t1" variable_1="t1"/>
  </connection>

  <connection>
    <map_components component_2="z" component_1="q"/>
    <map_variables variable_2="z" variable_1="z"/>
  </connection>

  <connection>
    <map_components component_2="uz" component_1="q"/>
    <map_variables variable_2="uz" variable_1="uz"/>
  </connection>

  <connection>
    <map_components component_2="q" component_1="x2"/>
    <map_variables variable_2="q" variable_1="q"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="x2"/>
    <map_variables variable_2="t2" variable_1="t2"/>
  </connection>

  <connection>
    <map_components component_2="x2" component_1="x3"/>
    <map_variables variable_2="x2" variable_1="x2"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="x3"/>
    <map_variables variable_2="t2" variable_1="t2"/>
  </connection>

  <connection>
    <map_components component_2="x3" component_1="m"/>
    <map_variables variable_2="x3" variable_1="x3"/>
  </connection>

  <connection>
    <map_components component_2="phi" component_1="m"/>
    <map_variables variable_2="phi" variable_1="phi"/>
  </connection>

  <connection>
    <map_components component_2="r" component_1="phi"/>
    <map_variables variable_2="r" variable_1="r"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="ur0"/>
    <map_variables variable_2="r0" variable_1="r0"/>
  </connection>
  
  <connection>
    <map_components component_2="model_parameters" component_1="ur1"/>
    <map_variables variable_2="r1" variable_1="r1"/>
  </connection>
  
  <connection>
    <map_components component_2="z" component_1="uz"/>
    <map_variables variable_2="z" variable_1="z"/>
  </connection>
  
  <connection>
    <map_components component_2="r" component_1="ur1"/>
    <map_variables variable_2="r" variable_1="r"/>
  </connection>
  
  <connection>
    <map_components component_2="h" component_1="f"/>
    <map_variables variable_2="f" variable_1="f"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="h"/>
    <map_variables variable_2="t4" variable_1="t4"/>
  </connection>





<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#def351ff-ff65-489e-a90f-422419ee19d7">
    <rdf:li>oscillator</rdf:li>
    <rdf:li>circulation</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#cca8f58b-cd4a-471d-b464-967fbc221ec6">
    <rdf:li rdf:resource="rdf:#0104ed59-e9db-496e-8f1e-13acbdf49796"/>
    <rdf:li rdf:resource="rdf:#97d2315e-13f6-40aa-a85f-3a51f7f0687b"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#17bc6e79-48a8-4a5e-855f-aeef04fb4af2">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9a962845-7266-4b5f-bb0d-cf7c31ad9a85">
    <vCard:N rdf:resource="rdf:#7671dd3a-41aa-4261-921b-1de1471b8774"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#24db22a1-47ef-4e34-82b4-0f0fb0a8a78d">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#def351ff-ff65-489e-a90f-422419ee19d7"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#97d2315e-13f6-40aa-a85f-3a51f7f0687b">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#b8c895c3-e3d4-4b6e-ad5c-4d772329c348"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7671dd3a-41aa-4261-921b-1de1471b8774">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c81d785a-fff0-41bb-98d0-eecf73e8fc81">
    <dcterms:W3CDTF>2007-10-25T10:09:25+13:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c234fc8a-49b2-4108-acb4-e829ea9d4c08">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6e6fe0bb-b450-4ac5-a345-f18e3d3da0be">
    <dcterms:W3CDTF>1986-00-00 00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#08b6d833-4057-46f1-8994-18fcee5380e6">
    <dcterms:modified rdf:resource="rdf:#017a958d-85f6-4ed0-81c8-86a442f05722"/>
    <rdf:value>The model author contacted us and provided the original source code.  We were able to use this code to get the CellML version of the model oscillating and recreating the published results.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#843a6c58-0756-4427-9fee-ccfe56257c2e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#$P5cZB1">
    <ns7:endingValue>20</ns7:endingValue>
    <ns7:nonstandard-pointDensity>10000</ns7:nonstandard-pointDensity>
    <ns7:maximumStepSize>0.1</ns7:maximumStepSize>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e237ec54-d18b-44ff-a68f-03def8a18af9">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#912881ca-824f-4734-8d10-320a641e1abe">
    <dc:creator rdf:resource="rdf:#ef9531bc-6ef2-4454-a2ef-e1c6e11a8c09"/>
    <rdf:value>This model runs in PCEnv (0.2) and COR to recreate the published results.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#45a67262-8ab6-4762-950c-220a1cc6f193">
    <dc:subject rdf:resource="rdf:#24db22a1-47ef-4e34-82b4-0f0fb0a8a78d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c402dceb-9df8-4577-9068-6d04dd487801">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#$N5cZB1">
    <ns7:boundIntervals rdf:resource="rdf:#$O5cZB1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4898f276-eeaf-4b18-8ab6-f28f30f48392">
    <vCard:ORG rdf:resource="rdf:#c402dceb-9df8-4577-9068-6d04dd487801"/>
    <vCard:EMAIL rdf:resource="rdf:#c234fc8a-49b2-4108-acb4-e829ea9d4c08"/>
    <vCard:N rdf:resource="rdf:#94167c23-3b26-425d-aacb-a0c17e3aa9d0"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0104ed59-e9db-496e-8f1e-13acbdf49796">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#c0206ccd-9441-477f-ae5e-d9b0394b333a"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c0206ccd-9441-477f-ae5e-d9b0394b333a">
    <vCard:Given>Annraoi</vCard:Given>
    <vCard:Family>De Paor</vCard:Family>
    <vCard:Other>M</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#$O5cZB1">
    <rdf:rest rdf:resource="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
    <rdf:first rdf:resource="rdf:#$P5cZB1"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#94167c23-3b26-425d-aacb-a0c17e3aa9d0">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="#F">
    <dcterms:alternative>wall force</dcterms:alternative>
    <dc:title>F</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b8c895c3-e3d4-4b6e-ad5c-4d772329c348">
    <vCard:Given>Patrick</vCard:Given>
    <vCard:Family>Timmons</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dd3314f0-500b-4bae-8d8a-b29215900cee">
    <dc:creator rdf:resource="rdf:#17bc6e79-48a8-4a5e-855f-aeef04fb4af2"/>
    <rdf:value>This is the CellML description of De Paor and Timmons's 1986 feedback oscillator model for circulatory autoregulation.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#57df1c14-1a85-43ad-8146-c3dca7b44ba5">
    <dc:title>Journal of Pineal Research</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ebf7340d-c889-4abd-94fa-fef5f6d3d8d5">
    <dcterms:modified rdf:resource="rdf:#c81d785a-fff0-41bb-98d0-eecf73e8fc81"/>
    <rdf:value>Several variables have been annotated with cmeta:id's to allow creation of a PCEnv session. Also added some simulation metadata - duration = 20 time units (dimensionless). </rdf:value>
    <cmeta:modifier rdf:resource="rdf:#9a962845-7266-4b5f-bb0d-cf7c31ad9a85"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b1a306b7-7ab8-4546-ad18-676c99495361">
    <dc:creator rdf:resource="rdf:#cca8f58b-cd4a-471d-b464-967fbc221ec6"/>
    <dc:title>A feedback oscillator model for circulatory autoregulation</dc:title>
    <bqs:volume>43</bqs:volume>
    <bqs:first_page>679</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#57df1c14-1a85-43ad-8146-c3dca7b44ba5"/>
    <dcterms:issued rdf:resource="rdf:#6e6fe0bb-b450-4ac5-a345-f18e3d3da0be"/>
    <bqs:last_page>688</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#912881ca-824f-4734-8d10-320a641e1abe"/>
    <dcterms:created rdf:resource="rdf:#0577411e-8bfa-4186-b26c-6d145f154067"/>
    <dc:creator rdf:resource="rdf:#4898f276-eeaf-4b18-8ab6-f28f30f48392"/>
    <cmeta:modification rdf:resource="rdf:#08b6d833-4057-46f1-8994-18fcee5380e6"/>
    <cmeta:modification rdf:resource="rdf:#ebf7340d-c889-4abd-94fa-fef5f6d3d8d5"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0577411e-8bfa-4186-b26c-6d145f154067">
    <dcterms:W3CDTF>2007-09-25T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#de_paor_model_1986">
    <ns7:simulation rdf:resource="rdf:#$N5cZB1"/>
    <dc:title>De Paor and Timmons's 1986 feedback oscillator model for circulatory autoregulation.</dc:title>
    <cmeta:comment rdf:resource="rdf:#dd3314f0-500b-4bae-8d8a-b29215900cee"/>
    <bqs:reference rdf:resource="rdf:#45a67262-8ab6-4762-950c-220a1cc6f193"/>
    <bqs:reference rdf:resource="rdf:#46a394f7-83db-4884-83b2-26223b131f6f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#46a394f7-83db-4884-83b2-26223b131f6f">
    <bqs:JournalArticle rdf:resource="rdf:#b1a306b7-7ab8-4546-ad18-676c99495361"/>
  </rdf:Description>
  <rdf:Description rdf:about="#f">
    <dcterms:alternative>laminar flow</dcterms:alternative>
    <dc:title>f</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#017a958d-85f6-4ed0-81c8-86a442f05722">
    <dcterms:W3CDTF>2007-10-25T09:00:16+13:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#843a6c58-0756-4427-9fee-ccfe56257c2e">
    <vCard:N rdf:resource="rdf:#e237ec54-d18b-44ff-a68f-03def8a18af9"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ef9531bc-6ef2-4454-a2ef-e1c6e11a8c09">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="#r">
    <dcterms:alternative>radius</dcterms:alternative>
    <dc:title>r</dc:title>
  </rdf:Description>
</rdf:RDF>
</model>
