// This CellML file was generated on 20/12/2007 at 3:22:13 at PM using:
//
// COR (0.9.31.769)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
def model Hinch as
  // Model Status
  //
  // This model is known to run in OpenCell and COR to reproduce the output shown in the publication.
  //
  // Model Structure
  //
  // ABSTRACT: Calcium (Ca2+)-induced Ca2+ release (CICR) in cardiac myocytes exhibits high gain and is graded. These properties result from local control of Ca2+ release. Existing local control models of Ca2+ release in which interactions between L-Type Ca2+ channels (LCCs) and ryanodine-sensitive Ca2+ release channels (RyRs) are simulated stochastically are able to reconstruct these properties, but only at high computational cost. Here we present a general analytical approach for deriving simplified models of local control of CICR, consisting of low-dimensional systems of coupled ordinary differential equations, from these more complex local control models in which LCC-RyR interactions are simulated stochastically. The resulting model, referred to as the coupled LCC-RyR gating model, successfully reproduces a range of experimental data, including L-Type Ca2+ current in response to voltage-clamp stimuli, inactivation of LCC current with and without Ca2+ release from the sarcoplasmic reticulum, voltage-dependence of excitation-contraction coupling gain, graded release, and the force-frequency relationship. The model does so with low computational cost.
  //
  // The original publication reference is cited below:
  //
  // A Simplified Local Control Model of Calcium-Induced Calcium Release in Cardiac Ventricular Myocytes, R. Hinch, J.R. Greenstein, A.J. Tanskanen, L. Xu, R.L. Winslow, 2004 Biophysical Journal, 87, 3723-3736, PubMed ID: 15465866 (http://www.ncbi.nlm.nih.gov/pubmed/15465866)
  //
  // state diagram
  //
  // Schematic diagram of the currents and the ion exchanges described by the cardiac ventricular myocyte model.
  //
  // state diagram
  //
  // The nine-state Markov model of the calcium release unit (CaRU). In state yij, the LCC is in the state i and the RyR is in the state j.
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_mM_ms as
    unit mM {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM_per_mV_ms as
    unit mM;
    unit second {expo: -1, pref: milli};
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_ms3 as
    unit second {expo: -3, pref: milli};
  enddef;
  def unit um2 as
    unit meter {expo: 2, pref: micro};
  enddef;
  def unit um3 as
    unit meter {expo: 3, pref: micro};
  enddef;
  def unit um3_per_ms as
    unit meter {expo: 3, pref: micro};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit um3_mM_per_ms as
    unit meter {expo: 3, pref: micro};
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mJ_per_mole_K as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp cell_geometry as
    // isVersionOf: http://identifiers.org/fma/FMA:67225
    var V_myo: um3 {init: 25.84e3, pub: out};
    var V_SR: um3 {init: 2.098e3, pub: out};
    var A_cap: um2 {init: 1.534e4, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0042391
  def comp membrane as
    var V: mV {pub: out};
    var R: mJ_per_mole_K {init: 8314.5, pub: out};
    var T: kelvin {init: 295, pub: out};
    var F: C_per_mole {init: 96487, pub: out};
    var time: ms {pub: in};
    var FVRT: dimensionless {pub: out};
    var FVRT_Ca: dimensionless {pub: out};
    FVRT = F*V/(R*T);
    FVRT_Ca = 2{dimensionless}*FVRT;
    V = sel
      case (time >= 0{ms}) and (time <= 200{ms}):
        0{mV};
      otherwise:
        -80{mV};
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp CaRU as
    var g_D: um3_per_ms {init: 0.065, priv: out};
    var J_R: um3_per_ms {init: 0.02, priv: out};
    var J_L: um3_per_ms {init: 9.13e-4, priv: out};
    var V_myo: um3 {priv: out, pub: in};
    var N: dimensionless {init: 50000, priv: out};
    var V: mV {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: mM {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_o: mM {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_SR: mM {priv: out, pub: in};
    var time: ms {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var FVRT_Ca: dimensionless {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var I_RyR: mM_per_ms {priv: in, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_LCC: mM_per_ms {priv: in, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp CaRU_Transitions as
    var V: mV {pub: in};
    var C_oc: mM {pub: in};
    var C_co: mM {pub: in};
    var Ca_i: mM {pub: in};
    var V_L: mV {init: -2};
    var del_VL: mV {init: 7};
    var phi_L: dimensionless {init: 2.35};
    var t_L: ms {init: 1};
    var tau_L: ms {init: 650};
    var t_R: ms;
    var tau_R: ms {init: 2.43};
    var phi_R: dimensionless {init: 0.05};
    var theta_R: dimensionless {init: 0.012};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var K_RyR: mM {init: 41e-3};
    var K_L: mM {init: 0.22e-3};
    var a: dimensionless {init: 0.0625};
    var b: dimensionless {init: 14};
    var c: dimensionless {init: 0.01};
    var d: dimensionless {init: 100};
    var expVL: dimensionless;
    var alpha_p: per_ms {pub: out};
    var alpha_m: per_ms {pub: out};
    var beta_poc: per_ms {pub: out};
    var beta_pcc: per_ms {pub: out};
    var beta_m: per_ms {pub: out};
    var epsilon_pco: per_ms {pub: out};
    var epsilon_pcc: per_ms {pub: out};
    var epsilon_m: per_ms {pub: out};
    var mu_poc: per_ms {pub: out};
    var mu_pcc: per_ms {pub: out};
    var mu_moc: per_ms {pub: out};
    var mu_mcc: per_ms {pub: out};
    expVL = exp((V-V_L)/del_VL);
    t_R = 1.17{dimensionless}*t_L;
    alpha_p = expVL/(t_L*(expVL+1{dimensionless}));
    alpha_m = phi_L/t_L;
    beta_poc = sqr(C_oc)/(t_R*(sqr(C_oc)+sqr(K_RyR)));
    beta_pcc = sqr(Ca_i)/(t_R*(sqr(Ca_i)+sqr(K_RyR)));
    beta_m = phi_R/t_R;
    epsilon_pco = C_co*(expVL+a)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_pcc = Ca_i*(expVL+a)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_m = b*(expVL+a)/(tau_L*(b*expVL+a));
    mu_poc = (sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(sqr(C_oc)+sqr(K_RyR)));
    mu_pcc = (sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(sqr(Ca_i)+sqr(K_RyR)));
    mu_moc = theta_R*d*(sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(d*sqr(C_oc)+c*sqr(K_RyR)));
    mu_mcc = theta_R*d*(sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(d*sqr(Ca_i)+c*sqr(K_RyR)));
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  def comp DS_Calcium_Concentrations as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_SR: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_o: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var FVRT_Ca: dimensionless {pub: in};
    var g_D: um3_per_ms {pub: in};
    var J_R: um3_per_ms {pub: in};
    var J_L: um3_per_ms {pub: in};
    var C_cc: mM {pub: out};
    var C_oc: mM {pub: out};
    var C_co: mM {pub: out};
    var C_oo: mM {pub: out};
    C_cc = Ca_i;
    C_co = (Ca_i+J_R/g_D*Ca_SR)/(1{dimensionless}+J_R/g_D);
    C_oc = sel
      case abs(FVRT_Ca) > 0.000000001{dimensionless}:
        (Ca_i+J_L/g_D*Ca_o*FVRT_Ca*exp(-FVRT_Ca)/(1{dimensionless}-exp(-FVRT_Ca)))/(1{dimensionless}+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        (Ca_i+J_L/g_D*Ca_o)/(1{dimensionless}+J_L/g_D);
    endsel;
    C_oo = sel
      case abs(FVRT_Ca) > 0.000000001{dimensionless}:
        (Ca_i+J_R/g_D*Ca_SR+J_L/g_D*Ca_o*FVRT_Ca*exp(-FVRT_Ca)/(1{dimensionless}-exp(-FVRT_Ca)))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        (Ca_i+J_R/g_D*Ca_SR+J_L/g_D*Ca_o)/(1{dimensionless}+J_R/g_D+J_L/g_D);
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp LCC_and_RyR_fluxes as
    var g_D: um3_per_ms {pub: in};
    var J_R: um3_per_ms {pub: in};
    var J_L: um3_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_SR: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_o: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var FVRT_Ca: dimensionless {pub: in};
    var J_Loo: um3_mM_per_ms {pub: out};
    var J_Loc: um3_mM_per_ms {pub: out};
    var J_Rco: um3_mM_per_ms {pub: out};
    var J_Roo: um3_mM_per_ms {pub: out};
    J_Rco = J_R*(Ca_SR-Ca_i)/(1{dimensionless}+J_R/g_D);
    J_Roo = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_R*(Ca_SR-Ca_i+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_SR-Ca_o*exp(-FVRT_Ca)))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_R*(Ca_SR-Ca_i+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_SR-Ca_o*exp(-0.00001{dimensionless})))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loc = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_L*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i)/(1{dimensionless}+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_o*exp(-0.00001{dimensionless})-Ca_i)/(1{dimensionless}+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loo = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_L*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i+J_R/g_D*(Ca_o*exp(-FVRT_Ca)-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(FVRT_Ca)));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_o*exp(-0.00001{dimensionless})-Ca_i+J_R/g_D*(Ca_o*exp(-0.00001{dimensionless})-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp CaRU_states as
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_poc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var denom: per_ms3;
    var y_oc: dimensionless {pub: out};
    var y_co: dimensionless {pub: out};
    var y_oo: dimensionless {pub: out};
    var y_cc: dimensionless {pub: out};
    var y_ci: dimensionless {pub: out};
    var y_oi: dimensionless {pub: out};
    var y_ic: dimensionless {pub: out};
    var y_io: dimensionless {pub: out};
    var y_ii: dimensionless {pub: out};
    denom = (alpha_p+alpha_m)*((alpha_m+beta_m+beta_poc)*(beta_m+beta_pcc)+alpha_p*(beta_m+beta_poc));
    y_oc = alpha_p*beta_m*(alpha_p+alpha_m+beta_m+beta_pcc)/denom;
    y_co = alpha_m*(beta_pcc*(alpha_m+beta_m+beta_poc)+beta_poc*alpha_p)/denom;
    y_oo = alpha_p*(beta_poc*(alpha_p+beta_m+beta_pcc)+beta_pcc*alpha_m)/denom;
    y_cc = alpha_m*beta_m*(alpha_m+alpha_p+beta_m+beta_poc)/denom;
    y_ci = alpha_m/(alpha_p+alpha_m);
    y_oi = alpha_p/(alpha_p+alpha_m);
    y_ic = beta_m/(beta_pcc+beta_m);
    y_io = beta_pcc/(beta_pcc+beta_m);
    y_ii = 1{dimensionless}-y_oc-y_co-y_oo-y_cc-y_ci-y_ic-y_oi-y_io;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp CaRU_reduced_states as
    var y_oc: dimensionless {pub: in};
    var y_cc: dimensionless {pub: in};
    var y_co: dimensionless {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var epsilon_pco: per_ms {pub: in};
    var epsilon_pcc: per_ms {pub: in};
    var epsilon_m: per_ms {pub: in};
    var mu_poc: per_ms {pub: in};
    var mu_pcc: per_ms {pub: in};
    var mu_moc: per_ms {pub: in};
    var mu_mcc: per_ms {pub: in};
    var r_1: per_ms {pub: out};
    var r_2: per_ms {pub: out};
    var r_3: per_ms {pub: out};
    var r_4: per_ms {pub: out};
    var r_5: per_ms {pub: out};
    var r_6: per_ms {pub: out};
    var r_7: per_ms {pub: out};
    var r_8: per_ms {pub: out};
    var z_1: dimensionless {init: 0.98859, pub: out};
    var z_2: dimensionless {init: 0.0087302, pub: out};
    var z_3: dimensionless {init: 0.0026566, pub: out};
    var z_4: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var time: ms {pub: in};
    r_1 = y_oc*mu_poc+y_cc*mu_pcc;
    r_2 = (alpha_p*mu_moc+alpha_m*mu_mcc)/(alpha_p+alpha_m);
    r_3 = beta_m*mu_pcc/(beta_m+beta_pcc);
    r_4 = mu_mcc;
    r_5 = y_co*epsilon_pco+y_cc*epsilon_pcc;
    r_6 = epsilon_m;
    r_7 = alpha_m*epsilon_pcc/(alpha_p+alpha_m);
    r_8 = epsilon_m;
    z_4 = 1{dimensionless}-z_1-z_2-z_3;
    ode(z_1, time) = -(r_1+r_5)*z_1+r_2*z_2+r_6*z_3;
    ode(z_2, time) = r_1*z_1-(r_2+r_7)*z_2+r_8*z_4;
    ode(z_3, time) = r_5*z_1-(r_6+r_3)*z_3+r_4*z_4;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp RyR_current as
    var y_oo: dimensionless {pub: in};
    var y_co: dimensionless {pub: in};
    var y_oc: dimensionless {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var J_Roo: um3_mM_per_ms {pub: in};
    var J_Rco: um3_mM_per_ms {pub: in};
    var z_1: dimensionless {pub: in};
    var z_3: dimensionless {pub: in};
    var V_myo: um3 {pub: in};
    var N: dimensionless {pub: in};
    var J_R1: um3_mM_per_ms {pub: out};
    var J_R3: um3_mM_per_ms {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    // isVersionOf: http://identifiers.org/go/GO:0005219
    var I_RyR: mM_per_ms {pub: out};
    J_R1 = y_oo*J_Roo+J_Rco*y_co;
    J_R3 = J_Rco*beta_pcc/(beta_m+beta_pcc);
    I_RyR = (z_1*J_R1+z_3*J_R3)*N/V_myo;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp LCC_current as
    var y_oo: dimensionless {pub: in};
    var y_oc: dimensionless {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var J_Loo: um3_mM_per_ms {pub: in};
    var J_Loc: um3_mM_per_ms {pub: in};
    var z_1: dimensionless {pub: in};
    var z_2: dimensionless {pub: in};
    var V_myo: um3 {pub: in};
    var N: dimensionless {pub: in};
    var J_L1: um3_mM_per_ms {pub: out};
    var J_L2: um3_mM_per_ms {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_LCC: mM_per_ms {pub: out};
    J_L1 = J_Loo*y_oo+J_Loc*y_oc;
    J_L2 = J_Loc*alpha_p/(alpha_p+alpha_m);
    I_LCC = (z_1*J_L1+z_2*J_L2)*N/V_myo;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp Na_Ca_Exchanger as
    var FVRT: dimensionless {pub: in};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var eta: dimensionless {init: 0.35};
    var k_sat: dimensionless {init: 0.1};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var g_NCX: mM_per_ms {init: 38.5e-3};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_o: mM {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var I_NaCa: mM_per_ms {pub: out};
    I_NaCa = g_NCX*(exp(eta*FVRT)*pow(Na_i, 3{dimensionless})*Ca_o-exp((eta-1{dimensionless})*FVRT)*pow(Na_o, 3{dimensionless})*Ca_i)/((pow(Na_o, 3{dimensionless})+pow(K_mNa, 3{dimensionless}))*(Ca_o+K_mCa)*(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*FVRT)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0051208
  // isVersionOf: http://identifiers.org/go/GO:0070296
  def comp SERCA as
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0051563
    var g_SERCA: mM_per_ms {init: 0.45e-3};
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0051563
    var K_SERCA: mM {init: 0.5e-3};
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0051563
    var I_SERCA: mM_per_ms {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: mM {pub: in};
    I_SERCA = g_SERCA*sqr(Ca_i)/(sqr(K_SERCA)+sqr(Ca_i));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0070588
  // isVersionOf: http://identifiers.org/go/GO:0015085
  // isVersionOf: http://identifiers.org/go/GO:0006816
  def comp Sarcolemmal_Ca_pump as
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var g_pCa: mM_per_ms {init: 0.0035e-3};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var K_mpCa: mM {init: 0.5e-3};
    var Ca_i: mM {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var I_pCa: mM_per_ms {pub: out};
    I_pCa = g_pCa*Ca_i/(K_mpCa+Ca_i);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp Background_Ca_current as
    var V: mV {pub: in};
    var R: mJ_per_mole_K {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mole {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var E_Ca: mV {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_CaB: mM_per_mV_ms {init: 2.6875e-8};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var I_CaB: mM_per_ms {pub: out};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    I_CaB = g_CaB*(E_Ca-V);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp SR_Ca_leak_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var Ca_i: mM {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var Ca_SR: mM {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_SRl: per_ms {init: 1.8951e-5};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var I_SR: mM_per_ms {pub: out};
    I_SR = g_SRl*(Ca_SR-Ca_i);
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62338
  // isVersionOf: http://identifiers.org/fma/FMA:67901
  // isVersionOf: http://identifiers.org/go/GO:0030172
  def comp troponin_Ca_buffer as
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var k_m_TRPN: per_ms {init: 0.04};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var k_p_TRPN: per_mM_ms {init: 0.04e3};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var B_TRPN: mM {init: 70e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var TRPN: mM {pub: in};
    var Ca_i: mM {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var I_TRPN: mM_per_ms {pub: out};
    I_TRPN = k_m_TRPN*(B_TRPN-TRPN)-k_p_TRPN*TRPN*Ca_i;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62343
  // isVersionOf: http://identifiers.org/go/GO:0005516
  def comp calmodulin_Ca_buffer as
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    // isVersionOf: http://identifiers.org/go/GO:0005516
    var k_CMDN: mM {init: 2.382e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    // isVersionOf: http://identifiers.org/go/GO:0005516
    var B_CMDN: mM {init: 50e-3};
    var Ca_i: mM {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    // isVersionOf: http://identifiers.org/go/GO:0005516
    var beta_CMDN: dimensionless {pub: out};
    beta_CMDN = pow(1{dimensionless}+k_CMDN*B_CMDN/sqr(k_CMDN+Ca_i), -1{dimensionless});
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005219
  // isVersionOf: http://identifiers.org/fma/FMA:62338
  // isVersionOf: http://identifiers.org/fma/FMA:62343
  // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
  def comp intracellular_ion_concentrations as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Na_i: mM {init: 10, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: mM {init: 0.0001, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:67225
    var Ca_SR: mM {init: 700e-3, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var TRPN: mM {init: 0.0636364, pub: out};
    var time: ms {pub: in};
    var V_myo: um3 {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:67225
    var V_SR: um3 {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var beta_CMDN: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var I_SERCA: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_pCa: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var I_CaB: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var I_TRPN: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:67225
    var I_SR: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var I_NaCa: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    // isVersionOf: http://identifiers.org/go/GO:0005219
    var I_RyR: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_LCC: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var CaSR_plot: mM;
    ode(TRPN, time) = I_TRPN;
    ode(Ca_i, time) = beta_CMDN*(I_LCC+I_RyR-I_SERCA+I_SR+I_NaCa-I_pCa+I_CaB+I_TRPN);
    ode(Ca_SR, time) = V_myo/V_SR*(-I_RyR+I_SERCA-I_SR);
    CaSR_plot = Ca_SR*V_SR/V_myo;
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
  def comp extracellular_ion_concentrations as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Na_o: mM {init: 140, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_o: mM {init: 1, pub: out};
  enddef;

  def group as containment for
    comp membrane incl
      comp intracellular_ion_concentrations;
      comp extracellular_ion_concentrations;
      comp cell_geometry;
      comp CaRU incl
        comp CaRU_Transitions;
        comp CaRU_states;
        comp CaRU_reduced_states;
        comp DS_Calcium_Concentrations;
        comp LCC_and_RyR_fluxes;
        comp RyR_current;
        comp LCC_current;
      endcomp;
      comp Na_Ca_Exchanger;
      comp SERCA;
      comp Sarcolemmal_Ca_pump;
      comp Background_Ca_current;
      comp SR_Ca_leak_current;
      comp troponin_Ca_buffer;
      comp calmodulin_Ca_buffer;
    endcomp;
  enddef;

  def group as encapsulation for
    comp CaRU incl
      comp CaRU_Transitions;
      comp CaRU_states;
      comp CaRU_reduced_states;
      comp DS_Calcium_Concentrations;
      comp LCC_and_RyR_fluxes;
      comp RyR_current;
      comp LCC_current;
    endcomp;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between environment and CaRU for
    vars time and time;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between cell_geometry and CaRU for
    vars V_myo and V_myo;
  enddef;
  def map between CaRU and CaRU_reduced_states for
    vars time and time;
  enddef;
  def map between CaRU and LCC_and_RyR_fluxes for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars Ca_o and Ca_o;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between membrane and CaRU for
    vars V and V;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between CaRU and CaRU_Transitions for
    vars V and V;
    vars Ca_i and Ca_i;
  enddef;
  def map between CaRU_Transitions and CaRU_states for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
    vars beta_pcc and beta_pcc;
    vars beta_poc and beta_poc;
    vars beta_m and beta_m;
  enddef;
  def map between CaRU_Transitions and RyR_current for
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
  enddef;
  def map between CaRU_Transitions and LCC_current for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
  enddef;
  def map between CaRU_states and RyR_current for
    vars y_oo and y_oo;
    vars y_co and y_co;
    vars y_oc and y_oc;
  enddef;
  def map between CaRU_states and LCC_current for
    vars y_oo and y_oo;
    vars y_oc and y_oc;
  enddef;
  def map between LCC_and_RyR_fluxes and RyR_current for
    vars J_Roo and J_Roo;
    vars J_Rco and J_Rco;
  enddef;
  def map between LCC_and_RyR_fluxes and LCC_current for
    vars J_Loo and J_Loo;
    vars J_Loc and J_Loc;
  enddef;
  def map between CaRU_reduced_states and RyR_current for
    vars z_1 and z_1;
    vars z_3 and z_3;
  enddef;
  def map between CaRU_reduced_states and LCC_current for
    vars z_1 and z_1;
    vars z_2 and z_2;
  enddef;
  def map between DS_Calcium_Concentrations and CaRU_Transitions for
    vars C_oc and C_oc;
    vars C_co and C_co;
  enddef;
  def map between CaRU_Transitions and CaRU_reduced_states for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
    vars epsilon_pco and epsilon_pco;
    vars epsilon_pcc and epsilon_pcc;
    vars epsilon_m and epsilon_m;
    vars mu_poc and mu_poc;
    vars mu_pcc and mu_pcc;
    vars mu_moc and mu_moc;
    vars mu_mcc and mu_mcc;
  enddef;
  def map between CaRU_states and CaRU_reduced_states for
    vars y_oc and y_oc;
    vars y_cc and y_cc;
    vars y_co and y_co;
  enddef;
  def map between CaRU and DS_Calcium_Concentrations for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
    vars Ca_SR and Ca_SR;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between CaRU and RyR_current for
    vars V_myo and V_myo;
    vars N and N;
    vars I_RyR and I_RyR;
  enddef;
  def map between CaRU and LCC_current for
    vars V_myo and V_myo;
    vars N and N;
    vars I_LCC and I_LCC;
  enddef;
  def map between intracellular_ion_concentrations and CaRU for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars I_RyR and I_RyR;
    vars I_LCC and I_LCC;
  enddef;
  def map between extracellular_ion_concentrations and CaRU for
    vars Ca_o and Ca_o;
  enddef;
  def map between intracellular_ion_concentrations and Na_Ca_Exchanger for
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars I_NaCa and I_NaCa;
  enddef;
  def map between extracellular_ion_concentrations and Na_Ca_Exchanger for
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between membrane and Na_Ca_Exchanger for
    vars FVRT and FVRT;
  enddef;
  def map between intracellular_ion_concentrations and SERCA for
    vars Ca_i and Ca_i;
    vars I_SERCA and I_SERCA;
  enddef;
  def map between intracellular_ion_concentrations and Sarcolemmal_Ca_pump for
    vars Ca_i and Ca_i;
    vars I_pCa and I_pCa;
  enddef;
  def map between intracellular_ion_concentrations and Background_Ca_current for
    vars Ca_i and Ca_i;
    vars I_CaB and I_CaB;
  enddef;
  def map between extracellular_ion_concentrations and Background_Ca_current for
    vars Ca_o and Ca_o;
  enddef;
  def map between membrane and Background_Ca_current for
    vars F and F;
    vars T and T;
    vars R and R;
    vars V and V;
  enddef;
  def map between intracellular_ion_concentrations and SR_Ca_leak_current for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars I_SR and I_SR;
  enddef;
  def map between intracellular_ion_concentrations and troponin_Ca_buffer for
    vars Ca_i and Ca_i;
    vars TRPN and TRPN;
    vars I_TRPN and I_TRPN;
  enddef;
  def map between intracellular_ion_concentrations and calmodulin_Ca_buffer for
    vars Ca_i and Ca_i;
    vars beta_CMDN and beta_CMDN;
  enddef;
  def map between cell_geometry and intracellular_ion_concentrations for
    vars V_myo and V_myo;
    vars V_SR and V_SR;
  enddef;
enddef;
