<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="lokta_volterra_a" name="lokta_volterra_a">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Lokta-Volterra predator-prey dynamics model</title>
  <author>
    <firstname>James</firstname>
          <surname>Lawson</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This model is known to integrate to reproduce the desired results in COR and PCEnv. It is valid CellML and has consistent units.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
The Lotka–Volterra equations, also known as the predator–prey equations, are a pair of first-order, non-linear, differential equations frequently used to describe the dynamics of biological systems in which two species interact, one a predator and one its prey. They were proposed independently by Alfred J. Lotka in 1925 and Vito Volterra in 1926. This model is parameterised as follows: x = 10, y = 5, A = 1.5, B = 1, C = 3, D = 1.
</para>

<para>
For more information on this model please see <ulink url="http://en.wikipedia.org/wiki/Lotka%E2%80%93Volterra_equation">the Wikipedia entry on this subject</ulink>
</para>

</sect1>
</article>
</documentation>

  <component name="all">
    <variable name="t" units="dimensionless"/>
    <variable initial_value="10" name="x" units="dimensionless"/>
    <variable initial_value="5" name="y" units="dimensionless"/>
    <variable initial_value="1.5" name="A" units="dimensionless"/>
    <variable initial_value="1" name="B" units="dimensionless"/>
    <variable initial_value="3" name="C" units="dimensionless"/>
    <variable initial_value="1" name="D" units="dimensionless"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="1">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>x</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>A</ci>
            <ci>x</ci>
          </apply>
          <apply>
            <times/>
            <ci>B</ci>
            <ci>x</ci>
            <ci>y</ci>
          </apply>
        </apply>
      </apply>
      <apply id="2">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>y</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
            <apply>
              <minus/>
              <ci>C</ci>
            </apply>
            <ci>y</ci>
          </apply>
          <apply>
            <times/>
            <ci>D</ci>
            <ci>x</ci>
            <ci>y</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

	<rdf:RDF
			xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"
			xmlns:bqs="http://www.cellml.org/bqs/1.0#"
			xmlns:dc="http://purl.org/dc/elements/1.1/"
			xmlns:dcterms="http://purl.org/dc/terms/"
			xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
		<rdf:Description rdf:about="#lokta_volterra_a">
			<bqs:reference rdf:parseType="Resource">
				<bqs:Pubmed_id></bqs:Pubmed_id>
				<bqs:JournalArticle rdf:parseType="Resource">
					<dc:creator>
						<rdf:Seq>
							<rdf:li rdf:parseType="Resource">
								<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person" />
								<vCard:N rdf:parseType="Resource">
									<vCard:Family>Lokta</vCard:Family>
									<vCard:Given></vCard:Given>
									<vCard:Other></vCard:Other>
								</vCard:N>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person" />
								<vCard:N rdf:parseType="Resource">
									<vCard:Family>Volterra</vCard:Family>
									<vCard:Given></vCard:Given>
									<vCard:Other></vCard:Other>
								</vCard:N>
							</rdf:li>
						</rdf:Seq>
					</dc:creator>
					<dc:title>Predator-prey dynamics</dc:title>
					<bqs:volume />
					<bqs:first_page />
					<bqs:last_page />
					<bqs:Journal rdf:parseType="Resource">
						<dc:title></dc:title>
					</bqs:Journal>
					<dcterms:issued rdf:parseType="Resource">
						<dcterms:W3CDTF></dcterms:W3CDTF>
					</dcterms:issued>
				</bqs:JournalArticle>
			</bqs:reference>
			<bqs:reference rdf:parseType="Resource">
				<dc:subject rdf:parseType="Resource">
					<bqs:subject_type>keyword</bqs:subject_type>
					<rdf:value>
					<rdf:Bag>
						<rdf:li>predator-prey</rdf:li>
					</rdf:Bag>
					</rdf:value>
				</dc:subject>
			</bqs:reference>

		</rdf:Description>

	</rdf:RDF>

  <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
    <rdf:Description rdf:nodeID="n1">
      <rdf:first>
        <rdf:Description rdf:nodeID="n2"/>
      </rdf:first>
      <rdf:rest>
        <rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
      </rdf:rest>
    </rdf:Description>
    <rdf:Description rdf:nodeID="n2">
      <endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">50</endingValue>
    </rdf:Description>
    <rdf:Description rdf:nodeID="n3">
      <boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
        <rdf:Description rdf:nodeID="n1"/>
      </boundIntervals>
    </rdf:Description>
    <rdf:Description rdf:about="#lokta_volterra_a">
      <simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
        <rdf:Description rdf:nodeID="n3"/>
      </simulation>
    </rdf:Description>
  </rdf:RDF>
</model>
