<?xml version="1.0" encoding="utf-8"?>

<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="lokta_volterra_b" name="lokta_volterra_a">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Lokta-Volterra predator-prey dynamics model</title>
  <author>
    <firstname>James</firstname>
          <surname>Lawson</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This model is known to integrate to reproduce the desired results in COR and PCEnv. It is valid CellML and has consistent units.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
The Lotka–Volterra equations, also known as the predator–prey equations, are a pair of first-order, non-linear, differential equations frequently used to describe the dynamics of biological systems in which two species interact, one a predator and one its prey. They were proposed independently by Alfred J. Lotka in 1925 and Vito Volterra in 1926. This model is parameterised as follows: x = 3, y = 6, A = 1, B = 1, C = 1, D = 1.
</para>

<para>
For more information on this model please see <ulink url="http://en.wikipedia.org/wiki/Lotka%E2%80%93Volterra_equation">the Wikipedia entry on this subject</ulink>
</para>

</sect1>
</article>
</documentation>

   <component name="all">
      <variable name="t" units="dimensionless"/>
      <variable name="x" units="dimensionless" initial_value="3"/>
      <variable name="y" units="dimensionless" initial_value="6"/>
      <variable name="A" units="dimensionless" initial_value="1"/>
      <variable name="B" units="dimensionless" initial_value="1"/>
      <variable name="C" units="dimensionless" initial_value="1"/>
      <variable name="D" units="dimensionless" initial_value="1"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>x</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>A</ci>
                  <ci>x</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>B</ci>
                  <ci>x</ci>
                  <ci>y</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>t</ci>
               </bvar>
               <ci>y</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>C</ci>
                  </apply>
                  <ci>y</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>D</ci>
                  <ci>x</ci>
                  <ci>y</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>

	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Description rdf:about="#lokta_volterra_b">
			<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
				<rdf:Description rdf:nodeID="n1"/>
			</simulation>
		</rdf:Description>
		<rdf:Description rdf:nodeID="n2">
			<rdf:first>
				<rdf:Description rdf:nodeID="n3"/>
			</rdf:first>
			<rdf:rest>
				<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
			</rdf:rest>
		</rdf:Description>
		<rdf:Description rdf:about="#Z@Tib4m!;3^">
			<simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">
				<rdf:Description rdf:nodeID="n4"/>
			</simulation>
		</rdf:Description>
		<rdf:Description rdf:nodeID="n5">
			<rdf:first>
				<rdf:Description rdf:nodeID="n6"/>
			</rdf:first>
			<rdf:rest>
				<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
			</rdf:rest>
		</rdf:Description>
		<rdf:Description rdf:nodeID="n1">
			<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
				<rdf:Description rdf:nodeID="n5"/>
			</boundIntervals>
		</rdf:Description>
		<rdf:Description rdf:nodeID="n3">
			<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">10000</pointDensity>
			<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">50</endingValue>
			<maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">0.010</maximumStepSize>
		</rdf:Description>
		<rdf:Description rdf:nodeID="n4">
			<boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">
				<rdf:Description rdf:nodeID="n2"/>
			</boundIntervals>
		</rdf:Description>
		<rdf:Description rdf:nodeID="n6">
			<endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">50</endingValue>
			<maximumStepSize xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">0.1</maximumStepSize>
		</rdf:Description>
	</rdf:RDF>

	<rdf:RDF
			xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"
			xmlns:bqs="http://www.cellml.org/bqs/1.0#"
			xmlns:dc="http://purl.org/dc/elements/1.1/"
			xmlns:dcterms="http://purl.org/dc/terms/"
			xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
		<rdf:Description rdf:about="#lokta_volterra_b">
			<bqs:reference rdf:parseType="Resource">
				<bqs:Pubmed_id></bqs:Pubmed_id>
				<bqs:JournalArticle rdf:parseType="Resource">
					<dc:creator>
						<rdf:Seq>
							<rdf:li rdf:parseType="Resource">
								<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person" />
								<vCard:N rdf:parseType="Resource">
									<vCard:Family>Lokta</vCard:Family>
									<vCard:Given></vCard:Given>
									<vCard:Other></vCard:Other>
								</vCard:N>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person" />
								<vCard:N rdf:parseType="Resource">
									<vCard:Family>Volterra</vCard:Family>
									<vCard:Given></vCard:Given>
									<vCard:Other></vCard:Other>
								</vCard:N>
							</rdf:li>
						</rdf:Seq>
					</dc:creator>
					<dc:title>Predator-prey dynamics</dc:title>
					<bqs:volume />
					<bqs:first_page />
					<bqs:last_page />
					<bqs:Journal rdf:parseType="Resource">
						<dc:title></dc:title>
					</bqs:Journal>
					<dcterms:issued rdf:parseType="Resource">
						<dcterms:W3CDTF></dcterms:W3CDTF>
					</dcterms:issued>
				</bqs:JournalArticle>
			</bqs:reference>
			<bqs:reference rdf:parseType="Resource">
				<dc:subject rdf:parseType="Resource">
					<bqs:subject_type>keyword</bqs:subject_type>
					<rdf:value>
					<rdf:Bag>
						<rdf:li>predator-prey</rdf:li>
					</rdf:Bag>
					</rdf:value>
				</dc:subject>
			</bqs:reference>

		</rdf:Description>

	</rdf:RDF>

</model>
