// This CellML file was generated on 26/09/2007 at 15:09:33 using:
//
// COR (0.9.31.789)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
def model difrancesco_noble_1985 as
  // Di Francesco-Noble Purkinje Fibre Model 1985
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model has been curated and unit-checked by Penny Noble of Oxford University and is known to run in PCEnv and COR and reproduce the results published in the paper it is based on.
  //
  // Model Structure
  //
  // During the years that followed the formulation of the McAllister-Noble-Tsien Purkinje fibre model in 1975 and the Beeler-Reuter mammalian ventricular model in 1977, many experiments were performed which provided a greater insight into the working of the ion channels in cardiac tissue. D. Di Francesco and D. Noble (1985) constructed a new model of cardiac electrical activity which sought to incorporate much of this new data (see the figure below).
  //
  // The complete original paper reference is cited below:
  //
  // A Model of the Cardiac Electrical Activity Incorporating Ionic Pumps and Concentration Changes - Simulations of Ionic Currents and Concentration Changes, Di Francesco, D. and Noble, D. Phil. Trans. R. Soc. Lond. , B307, 353-398. PubMed ID: 2578676 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=2578676&dopt=Abstract)
  //
  // cell diagram of the DFN model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the DFN model.
  //
  // the cellml rendering of the DFN model
  //
  // The network defined in the CellML description of the Di Francesco-Noble model. A key describing the significance of the shapes of the components and the colours of the connections between them is in the notation guide (${HTML_EXMPL_GRAPHICAL_NOTATION}). For simplicity, not all the variables are shown.
  //
  // The membrane physically contains the currents, exchangers and pumps, as indicated by the blue arrows in . The currents act independently and are not connected to each other. Several of the channels encapsulate and contain further components which represent activation and inactivation gates. The addition of an encapsulation relationship informs modellers and processing software that the gates are important parts of the current model. It also prevents any other components that aren't also encapsulated by the parent component from connecting to its gates, effectively hiding them from the rest of the model.
  //
  // The breakdown of the model into components and the definition of encapsulation and containment relationships between them is somewhat arbitrary. When considering how a model should be broken into components, modellers are encouraged to consider which parts of a model might be re-used and how the physiological elements of the system being modelled are naturally bounded. Containment relationships should be used to provide simple rendering information for processing software (ideally, this will correspond to the layout of the physical system), and encapsulation should be used to group sets of components into sub-models.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millivolt_second as
    unit millivolt;
    unit second;
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit nanoA_per_millimolar as
    unit nanoA;
    unit millimolar {expo: -1};
  enddef;
  def unit microS_per_millimolar as
    unit microS;
    unit millimolar {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0042391
  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp membrane as
    var V: millivolt {init: -87, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var RTONF: millivolt {pub: out};
    var C: microF {init: 0.075};
    var i_pulse: nanoA {init: 0};
    var time: second {pub: in};
    var i_f: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_K1: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_Na_b: nanoA {pub: in};
    var i_Ca_b: nanoA {pub: in};
    var i_p: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_si: nanoA {pub: in};
    RTONF = R*T/F;
    ode(V, time) = -(i_f+i_K+i_K1+i_to+i_Na_b+i_Ca_b+i_p+i_NaCa+i_Na+i_si+i_pulse)/C;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0060081
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp hyperpolarising_activated_current as
    var i_f: nanoA {pub: out};
    var i_fNa: nanoA {pub: out};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var i_fK: nanoA {pub: out};
    var g_f_Na: microS {init: 3};
    var g_f_K: microS {init: 3};
    var Km_f: millimolar {init: 45};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var y: dimensionless {priv: in};
    E_Na = RTONF*ln(Nao/Nai);
    E_K = RTONF*ln(Kc/Ki);
    i_fNa = y*Kc/(Kc+Km_f)*g_f_Na*(V-E_Na);
    i_fK = y*Kc/(Kc+Km_f)*g_f_K*(V-E_K);
    i_f = i_fNa+i_fK;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0060081
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp hyperpolarising_activated_current_y_gate as
    var y: dimensionless {init: 0.2, pub: out};
    var alpha_y: per_second;
    var beta_y: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_y: millivolt {init: 1e-5};
    var E0_y: millivolt;
    alpha_y = 0.05{per_second}*exp(-0.067{per_millivolt}*(V+52{millivolt}-10{millivolt}));
    E0_y = V+52{millivolt}-10{millivolt};
    beta_y = sel
      case abs(E0_y) < delta_y:
        2.5{per_second};
      otherwise:
        1{per_millivolt_second}*E0_y/(1{dimensionless}-exp(-0.2{per_millivolt}*E0_y));
    endsel;
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp time_dependent_potassium_current as
    var i_K: nanoA {pub: out};
    var I_K: nanoA;
    var i_K_max: nanoA {init: 180};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Ki: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var x: dimensionless {priv: in};
    I_K = i_K_max*(Ki-Kc*exp(-V/RTONF))/140{millimolar};
    i_K = x*I_K;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp time_dependent_potassium_current_x_gate as
    var x: dimensionless {init: 0.01, pub: out};
    var alpha_x: per_second;
    var beta_x: per_second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    alpha_x = 0.5{per_second}*exp(0.0826{per_millivolt}*(V+50{millivolt}))/(1{dimensionless}+exp(0.057{per_millivolt}*(V+50{millivolt})));
    beta_x = 1.3{per_second}*exp(-0.06{per_millivolt}*(V+20{millivolt}))/(1{dimensionless}+exp(-0.04{per_millivolt}*(V+20{millivolt})));
    ode(x, time) = alpha_x*(1{dimensionless}-x)-beta_x*x;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp time_independent_potassium_current as
    var i_K1: nanoA {pub: out};
    var g_K1: microS {init: 920};
    var Km_K1: millimolar {init: 210};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Kc: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    i_K1 = g_K1*Kc/(Kc+Km_K1)*(V-E_K)/(1{dimensionless}+exp((V+10{millivolt}-E_K)*2{dimensionless}/RTONF));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp transient_outward_current as
    var i_to: nanoA {pub: out};
    var Km_to: millimolar {init: 10};
    var Km_Ca: millimolar {init: 0.0005};
    var g_to: microS_per_millimolar {init: 0.28};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var s: dimensionless {priv: in};
    i_to = s*g_to*(0.2{dimensionless}+Kc/(Km_to+Kc))*Cai/(Km_Ca+Cai)*(V+10{millivolt})/(1{dimensionless}-exp(-0.2{per_millivolt}*(V+10{millivolt})))*(Ki*exp(0.5{dimensionless}*V/RTONF)-Kc*exp(-0.5{dimensionless}*V/RTONF));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp transient_outward_current_s_gate as
    var s: dimensionless {init: 1, pub: out};
    var alpha_s: per_second;
    var beta_s: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_s = 0.033{per_second}*exp(-V/17{millivolt});
    beta_s = 33{per_second}/(1{dimensionless}+exp(-(V+10{millivolt})/8{millivolt}));
    ode(s, time) = alpha_s*(1{dimensionless}-s)-beta_s*s;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp sodium_background_current as
    var i_Na_b: nanoA {pub: out};
    var g_Nab: microS {init: 0.18};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0022832
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp calcium_background_current as
    var i_Ca_b: nanoA {pub: out};
    var E_Ca: millivolt {pub: out};
    var g_Cab: microS {init: 0.02};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    E_Ca = 0.5{dimensionless}*RTONF*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp sodium_potassium_pump as
    var i_p: nanoA {pub: out};
    var I_p: nanoA {init: 125};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    i_p = I_p*Kc/(K_mK+Kc)*Nai/(K_mNa+Nai);
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: nanoA {pub: out};
    var n_NaCa: dimensionless {init: 3, pub: out};
    var K_NaCa: nanoA {init: 0.02};
    var d_NaCa: dimensionless {init: 0.001};
    var gamma: dimensionless {init: 0.5};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var Cao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var E_Ca: millivolt {pub: in};
    i_NaCa = K_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V/RTONF)*pow(Nai, n_NaCa)*Cao-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V/RTONF)*pow(Nao, n_NaCa)*Cai)/((1{millimolar4}+d_NaCa*(Cai*pow(Nao, n_NaCa)+Cao*pow(Nai, n_NaCa)))*(1{dimensionless}+Cai/0.0069{millimolar}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp fast_sodium_current as
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 750};
    var E_mh: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_mh = RTONF*ln((Nao+0.12{dimensionless}*Kc)/(Nai+0.12{dimensionless}*Ki));
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.01, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.8, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}))+1{dimensionless});
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0022832
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp second_inward_current as
    var i_si: nanoA {pub: out};
    var i_siCa: nanoA {pub: out};
    var i_siK: nanoA {pub: out};
    var i_siNa: nanoA {pub: out};
    var P_si: nanoA_per_millimolar {init: 15};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Kc: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    i_siCa = 4{dimensionless}*P_si*(V-50{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})*2{dimensionless}/RTONF)))*(Cai*exp(100{millivolt}/RTONF)-Cao*exp(-2{dimensionless}*(V-50{millivolt})/RTONF))*d*f*f2;
    i_siK = 0.01{dimensionless}*P_si*(V-50{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})/RTONF)))*(Ki*exp(50{millivolt}/RTONF)-Kc*exp(-1{dimensionless}*(V-50{millivolt})/RTONF))*d*f*f2;
    i_siNa = 0.01{dimensionless}*P_si*(V-50{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})/RTONF)))*(Nai*exp(50{millivolt}/RTONF)-Nao*exp(-1{dimensionless}*(V-50{millivolt})/RTONF))*d*f*f2;
    i_si = i_siCa+i_siK+i_siNa;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp second_inward_current_d_gate as
    var d: dimensionless {init: 0.005, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_d: millivolt {init: 0.0001};
    var E0_d: millivolt;
    E0_d = V+24{millivolt}-5{millivolt};
    alpha_d = sel
      case abs(E0_d) < delta_d:
        120{per_second};
      otherwise:
        30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-1{dimensionless}*E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < delta_d:
        120{per_second};
      otherwise:
        12{per_millivolt_second}*E0_d/(exp(E0_d/10{millivolt})-1{dimensionless});
    endsel;
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp second_inward_current_f_gate as
    var f: dimensionless {init: 1, pub: out};
    var alpha_f: per_second;
    var beta_f: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_f: millivolt {init: 0.0001};
    var E0_f: millivolt;
    E0_f = V+34{millivolt};
    alpha_f = sel
      case abs(E0_f) < delta_f:
        25{per_second};
      otherwise:
        6.25{per_millivolt_second}*E0_f/(exp(E0_f/4{millivolt})-1{dimensionless});
    endsel;
    beta_f = 50{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022832
  def comp second_inward_current_f2_gate as
    var f2: dimensionless {init: 1, pub: out};
    var alpha_f2: per_second {init: 5};
    var beta_f2: per_second;
    var K_mf2: millimolar {init: 0.001};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Cai: millimolar {pub: in};
    ode(f2, time) = alpha_f2-f2*(alpha_f2+beta_f2);
    beta_f2 = Cai*alpha_f2/K_mf2;
  enddef;

  def comp extracellular_sodium_concentration as
    var Nao: millimolar {init: 140, pub: out};
  enddef;

  def comp intracellular_sodium_concentration as
    var Nai: millimolar {init: 8, pub: out};
    var radius: micrometre {init: 0.05};
    var length: micrometre {init: 2};
    var V_e_ratio: dimensionless {init: 0.1};
    var V_Cell: micrometre3;
    var Vi: micrometre3 {pub: out};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoA {pub: in};
    var i_Na_b: nanoA {pub: in};
    var i_siNa: nanoA {pub: in};
    var i_p: nanoA {pub: in};
    var i_fNa: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var n_NaCa: dimensionless {pub: in};
    V_Cell = 3.141592654{dimensionless}*sqr(radius)*length;
    Vi = V_Cell*(1{dimensionless}-V_e_ratio);
    ode(Nai, time) = -1{mA_nA}*(i_Na+i_Na_b+i_fNa+i_siNa+i_p*3{dimensionless}+i_NaCa*n_NaCa/(n_NaCa-2{dimensionless}))/(1{litre_micrometre3}*Vi*F);
  enddef;

  def comp extracellular_calcium_concentration as
    var Cao: millimolar {init: 2, pub: out};
  enddef;

  def comp intracellular_calcium_concentration as
    var Cai: millimolar {init: 5e-5, pub: out};
    var V_up: micrometre3;
    var V_rel: micrometre3;
    var Vi: micrometre3 {pub: in};
    var i_up: nanoA;
    var i_tr: nanoA;
    var i_rel: nanoA;
    var Ca_up: millimolar {init: 2};
    var Ca_rel: millimolar {init: 1};
    var Ca_up_max: millimolar {init: 5};
    var K_mCa: millimolar {init: 0.001};
    var p: dimensionless {init: 1};
    var alpha_p: per_second;
    var beta_p: per_second;
    var tau_up: second {init: 0.025};
    var tau_rep: second {init: 2};
    var tau_rel: second {init: 0.05};
    var rCa: dimensionless {init: 2};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Ca_b: nanoA {pub: in};
    var i_siCa: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var n_NaCa: dimensionless {pub: in};
    i_up = 2{dimensionless}*1{litre_micrometre3}*Vi*F/(1{mA_nA}*tau_up*Ca_up_max)*Cai*(Ca_up_max-Ca_up);
    i_tr = 2{dimensionless}*1{litre_micrometre3}*V_rel*F/(1{mA_nA}*tau_rep)*p*(Ca_up-Ca_rel);
    alpha_p = 0.625{per_millivolt_second}*(V+34{millivolt})/(exp((V+34{millivolt})/4{millivolt})-1{dimensionless});
    beta_p = 5{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    i_rel = 2{dimensionless}*1{litre_micrometre3}*V_rel*F/(1{mA_nA}*tau_rel)*Ca_rel*pow(Cai, rCa)/(pow(Cai, rCa)+pow(K_mCa, rCa));
    ode(p, time) = alpha_p*(1{dimensionless}-p)-beta_p*p;
    ode(Ca_up, time) = 1{mA_nA}*(i_up-i_tr)/(2{dimensionless}*1{litre_micrometre3}*V_up*F);
    V_up = Vi*0.05{dimensionless};
    ode(Ca_rel, time) = 1{mA_nA}*(i_tr-i_rel)/(2{dimensionless}*1{litre_micrometre3}*V_rel*F);
    V_rel = Vi*0.02{dimensionless};
    ode(Cai, time) = -1{mA_nA}*(i_siCa+i_Ca_b-2{dimensionless}*i_NaCa/(n_NaCa-2{dimensionless})-i_rel+i_up)/(2{dimensionless}*1{litre_micrometre3}*Vi*F);
  enddef;

  def comp extracellular_potassium_concentration as
    var Kc: millimolar {init: 4, pub: out};
    var Ve: micrometre3 {init: 0.00157};
    var Kb: millimolar {init: 4};
    var i_mK: nanoA {pub: out};
    var pf: per_second {init: 0.7};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_K1: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_fK: nanoA {pub: in};
    var i_siK: nanoA {pub: in};
    var i_p: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    i_mK = i_K1+i_K+i_fK+i_siK+i_to-2{dimensionless}*i_p;
    ode(Kc, time) = -pf*(Kc-Kb)+1{mA_nA}*i_mK/(1{litre_micrometre3}*Ve*F);
  enddef;

  def comp intracellular_potassium_concentration as
    var Ki: millimolar {init: 140, pub: out};
    var Vi: micrometre3 {pub: in};
    var i_mK: nanoA {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(Ki, time) = -1{mA_nA}*i_mK/(1{litre_micrometre3}*Vi*F);
  enddef;

  def group as containment for
    comp membrane incl
      comp hyperpolarising_activated_current incl
        comp hyperpolarising_activated_current_y_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_x_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
      endcomp;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp Na_Ca_exchanger;
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp second_inward_current incl
        comp second_inward_current_d_gate;
        comp second_inward_current_f_gate;
        comp second_inward_current_f2_gate;
      endcomp;
      comp intracellular_sodium_concentration;
      comp extracellular_sodium_concentration;
      comp intracellular_calcium_concentration;
      comp extracellular_calcium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
    endcomp;
  enddef;

  def group as encapsulation for
    comp hyperpolarising_activated_current incl
      comp hyperpolarising_activated_current_y_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_x_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
    endcomp;
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp second_inward_current incl
      comp second_inward_current_d_gate;
      comp second_inward_current_f_gate;
      comp second_inward_current_f2_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between second_inward_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between extracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_f and i_f;
  enddef;
  def map between time_dependent_potassium_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_K and i_K;
  enddef;
  def map between time_independent_potassium_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_K1 and i_K1;
  enddef;
  def map between transient_outward_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_to and i_to;
  enddef;
  def map between sodium_background_current and membrane for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars V and V;
    vars i_p and i_p;
  enddef;
  def map between Na_Ca_exchanger and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars RTONF and RTONF;
  enddef;
  def map between fast_sodium_current and membrane for
    vars V and V;
    vars i_Na and i_Na;
    vars RTONF and RTONF;
  enddef;
  def map between second_inward_current and membrane for
    vars V and V;
    vars i_si and i_si;
    vars RTONF and RTONF;
  enddef;
  def map between intracellular_sodium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_calcium_concentration and membrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between extracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between hyperpolarising_activated_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_fK and i_fK;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between hyperpolarising_activated_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between hyperpolarising_activated_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and Na_Ca_exchanger for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_sodium_concentration for
    vars i_fNa and i_fNa;
    vars Nai and Nai;
  enddef;
  def map between hyperpolarising_activated_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between calcium_background_current and Na_Ca_exchanger for
    vars E_Ca and E_Ca;
  enddef;
  def map between calcium_background_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between time_dependent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K and i_K;
  enddef;
  def map between time_dependent_potassium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K1 and i_K1;
  enddef;
  def map between transient_outward_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_to and i_to;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between transient_outward_current and intracellular_calcium_concentration for
    vars Cai and Cai;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_Ca_b and i_Ca_b;
    vars Cai and Cai;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars i_p and i_p;
    vars Kc and Kc;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_p and i_p;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between Na_Ca_exchanger and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between Na_Ca_exchanger and intracellular_sodium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and intracellular_calcium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between fast_sodium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between second_inward_current and intracellular_calcium_concentration for
    vars i_siCa and i_siCa;
    vars Cai and Cai;
  enddef;
  def map between second_inward_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between second_inward_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between second_inward_current and extracellular_potassium_concentration for
    vars i_siK and i_siK;
    vars Kc and Kc;
  enddef;
  def map between second_inward_current and intracellular_sodium_concentration for
    vars i_siNa and i_siNa;
    vars Nai and Nai;
  enddef;
  def map between second_inward_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between hyperpolarising_activated_current and hyperpolarising_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_current and second_inward_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_current and second_inward_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_current and second_inward_current_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars Vi and Vi;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_potassium_concentration for
    vars Vi and Vi;
  enddef;
  def map between extracellular_potassium_concentration and intracellular_potassium_concentration for
    vars i_mK and i_mK;
  enddef;
enddef;
// #id_00004
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00005
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00006
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00007
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00008
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00009
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00010
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0022832
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00011
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00012
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00013
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00014
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00015
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00016
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00017
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00018
// isVersionOf: http://identifiers.org/go/GO:0005391
// isVersionOf: http://identifiers.org/go/GO:0005890
// #id_00019
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00020
// isVersionOf: http://identifiers.org/go/GO:0042391
// isVersionOf: http://identifiers.org/go/GO:0060075
// isVersionOf: http://identifiers.org/go/GO:0030322
// #id_00021
// isVersionOf: http://identifiers.org/go/GO:0060081
// #id_00022
// isVersionOf: http://identifiers.org/go/GO:0060081
// #id_00023
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00024
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00025
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00026
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00027
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00028
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00029
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0022832
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00030
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00031
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00032
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00033
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00034
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00035
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00036
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00037
// isVersionOf: http://identifiers.org/go/GO:0005391
// isVersionOf: http://identifiers.org/go/GO:0005890
// #id_00038
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00053
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00054
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00055
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00056
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00057
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00058
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00059
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00060
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00061
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00062
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00063
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00064
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00065
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00066
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00067
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00068
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00069
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00070
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00071
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00072
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00073
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00074
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00075
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00076
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00077
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00078
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// isVersionOf: http://identifiers.org/go/GO:0022832
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00079
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00080
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00081
// isVersionOf: http://identifiers.org/go/GO:0022832
// #id_00082
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0005248
// isVersionOf: http://identifiers.org/go/GO:0005272
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0034706
// isVersionOf: http://identifiers.org/go/GO:0001518
// #id_00083
// isVersionOf: http://identifiers.org/go/GO:0005391
// isVersionOf: http://identifiers.org/go/GO:0005890
// #id_00084
// isVersionOf: http://identifiers.org/go/GO:0005432
