// FILE :  saucerman_model_dyadic_cleft_2008.xml
def model saucerman_model_dyadic_cleft_2008 as
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit third_order_rate_constant as
    unit micromolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit micromolar2 as
    unit micromolar {expo: 2};
  enddef;
  // In order to facilitate the import of this dyadic cleft model by the main Saucerman 2008 model I will encapsulate the current model in a top component called "dyadic_cleft".
  //
  // Catherine Lloyd

  def comp dyadic_cleft as
    // dyadic_cleft
    //
    // top component which encapsulates the entire dyadic cleft model
    var B: micromolar {pub: out, priv: in};
    var CaM: micromolar {pub: out, priv: in};
    var Ca2CaM: micromolar {pub: out, priv: in};
    var Ca4CaM: micromolar {pub: out, priv: in};
    var time: second {pub: in, priv: out};
  enddef;
  def map between dyadic_cleft and B for
    vars B and B;
  enddef;
  def map between dyadic_cleft and CaM for
    vars CaM and CaM;
    vars time and time;
  enddef;
  def map between dyadic_cleft and Ca2CaM for
    vars Ca2CaM and Ca2CaM;
    vars time and time;
  enddef;
  def map between dyadic_cleft and Ca4CaM for
    vars Ca4CaM and Ca4CaM;
    vars time and time;
  enddef;
  def map between CaMB and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Ca2CaMB and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Ca4CaMB and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Ca4CaN and dyadic_cleft for
    vars time and time;
  enddef;
  def map between CaMCaN and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Ca2CaMCaN and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Ca4CaMCaN and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Pb2 and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Pb and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Pt and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Pt2 and dyadic_cleft for
    vars time and time;
  enddef;
  def map between Pa and dyadic_cleft for
    vars time and time;
  enddef;
  // CaM reaction fluxes

  def comp Reaction_02 as
    // Reaction_02
    //
    // Ca binding to CaM
    var Reaction_02: flux {pub: out};
    var k02: third_order_rate_constant {pub: out};
    var k20: first_order_rate_constant {pub: out, init: 10.0};
    var Kd02: micromolar2;
    var K: micromolar {pub: in};
    var Mg: micromolar {pub: in};
    var Ca: micromolar {pub: in};
    var CaM: micromolar {pub: in};
    var Ca2CaM: micromolar {pub: in};
    Reaction_02 = k02*sqr(Ca)*CaM-k20*Ca2CaM;
    k02 = k20/Kd02;
    Kd02 = sel
      case Mg <= 1.0{micromolar}:
        0.0025{micromolar2}*(1.0{dimensionless}+K/0.94{micromolar}-Mg/0.012{micromolar})*(1.0{dimensionless}+K/8.1{micromolar}+Mg/0.022{micromolar});
      otherwise:
        0.0025{micromolar2}*(1.0{dimensionless}+K/0.94{micromolar}+(Mg-1.0{micromolar})/0.06{micromolar}-1.0{dimensionless}/0.012{dimensionless})*(1.0{dimensionless}+K/8.1{micromolar}+1.0{dimensionless}/0.022{dimensionless}+(Mg-1.0{micromolar})/0.068{micromolar});
    endsel;
  enddef;

  def comp Reaction_24 as
    // Reaction_24
    //
    // Ca binding to Ca2CaM
    var Reaction_24: flux {pub: out};
    var k24: third_order_rate_constant {pub: out};
    var k42: first_order_rate_constant {pub: out, init: 500.0};
    var Kd24: micromolar2;
    var K: micromolar {pub: in};
    var Mg: micromolar {pub: in};
    var Ca: micromolar {pub: in};
    var Ca2CaM: micromolar {pub: in};
    var Ca4CaM: micromolar {pub: in};
    Reaction_24 = k24*sqr(Ca)*Ca2CaM-k42*Ca4CaM;
    k24 = k42/Kd24;
    Kd24 = sel
      case Mg <= 1.0{micromolar}:
        0.128{micromolar2}*(1.0{dimensionless}+K/0.64{micromolar}+Mg/0.014{micromolar})*(1.0{dimensionless}+K/13.0{micromolar}-Mg/0.153{micromolar});
      otherwise:
        0.128{micromolar2}*(1.0{dimensionless}+K/0.64{micromolar}+(Mg-1.0{micromolar})/0.005{micromolar})*(1.0{dimensionless}/0.012{dimensionless})*(1.0{dimensionless}+K/13.0{micromolar}+(Mg-1.0{micromolar})/0.15{micromolar}-1.0{dimensionless}/0.153{dimensionless});
    endsel;
  enddef;

  def comp Reaction_02B as
    // Reaction_02B
    //
    // Ca binding to CaMB
    var Reaction_02B: flux {pub: out};
    var k02B: third_order_rate_constant;
    var k20B: first_order_rate_constant {init: 0.1};
    var k02: third_order_rate_constant {pub: in};
    var Ca: micromolar {pub: in};
    var CaMB: micromolar {pub: in};
    var Ca2CaMB: micromolar {pub: in};
    Reaction_02B = k02B*sqr(Ca)*CaMB-k20B*Ca2CaMB;
    k02B = k02;
  enddef;

  def comp Reaction_24B as
    // Reaction_24B
    //
    // Ca binding to Ca2CaMB
    var Reaction_24B: flux {pub: out};
    var k24B: third_order_rate_constant;
    var k42B: first_order_rate_constant;
    var k24: third_order_rate_constant {pub: in};
    var k42: first_order_rate_constant {pub: in};
    var Ca: micromolar {pub: in};
    var Ca2CaMB: micromolar {pub: in};
    var Ca4CaMB: micromolar {pub: in};
    Reaction_24B = k24B*sqr(Ca)*Ca2CaMB-k42B*Ca4CaMB;
    k42B = k42;
    k24B = k24;
  enddef;

  def comp Reaction_0B as
    // Reaction_0B
    //
    // buffer binding to CaM
    var Reaction_0B: flux {pub: out};
    var k0B_on: second_order_rate_constant {init: 0.007};
    var k0B_off: first_order_rate_constant {init: 0.0014};
    var B: micromolar {pub: in};
    var CaM: micromolar {pub: in};
    var CaMB: micromolar {pub: in};
    Reaction_0B = k0B_on*CaM*B-k0B_off*CaMB;
  enddef;

  def comp Reaction_2B as
    // Reaction_2B
    //
    // buffer binding to Ca2CaM
    var Reaction_2B: flux {pub: out};
    var k2B_on: second_order_rate_constant {init: 0.007};
    var k2B_off: first_order_rate_constant {init: 0.000014};
    var B: micromolar {pub: in};
    var Ca2CaM: micromolar {pub: in};
    var Ca2CaMB: micromolar {pub: in};
    Reaction_2B = k2B_on*Ca2CaM*B-k2B_off*Ca2CaMB;
  enddef;

  def comp Reaction_4B as
    // Reaction_4B
    //
    // buffer binding to Ca4CaM
    var Reaction_4B: flux {pub: out};
    var k4B_on: second_order_rate_constant {init: 0.007};
    var k4B_off: first_order_rate_constant {init: 0.000014};
    var B: micromolar {pub: in};
    var Ca4CaM: micromolar {pub: in};
    var Ca4CaMB: micromolar {pub: in};
    Reaction_4B = k4B_on*Ca4CaM*B-k4B_off*Ca4CaMB;
  enddef;
  // Ca binding to CaM and CaM buffering

  def comp B as
    // B
    //
    // buffer
    var B: micromolar {pub: out};
    var Btot: micromolar {init: 1860.0};
    var CaMB: micromolar {pub: in};
    var Ca2CaMB: micromolar {pub: in};
    var Ca4CaMB: micromolar {pub: in};
    B = Btot-(CaMB+Ca2CaMB+Ca4CaMB);
  enddef;

  def comp CaM as
    // CaM
    //
    // calmodulin
    var CaM: micromolar {init: 0.1, pub: out};
    var Reaction_02: flux {pub: in};
    var Reaction_0B: flux {pub: in};
    var Reaction_0CaN: flux {pub: in};
    var time: second {pub: in};
    ode(CaM, time) = 1E-3{dimensionless}*(-(Reaction_02+Reaction_0B+Reaction_0CaN));
  enddef;

  def comp Ca2CaM as
    // Ca2CaM
    //
    // Ca2-calmodulin complex
    var Ca2CaM: micromolar {init: 0.1, pub: out};
    var CaMKIItot: micromolar {pub: in};
    var Reaction_02: flux {pub: in};
    var Reaction_24: flux {pub: in};
    var Reaction_2B: flux {pub: in};
    var Reaction_2CaN: flux {pub: in};
    var Reaction_CKt2a: first_order_rate_constant {pub: in};
    var Reaction_CKib2: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Ca2CaM, time) = 1E-3{dimensionless}*(CaMKIItot*(Reaction_CKt2a-Reaction_CKib2)+Reaction_02-(Reaction_24+Reaction_2B+Reaction_2CaN));
  enddef;

  def comp Ca4CaM as
    // Ca4CaM
    //
    // Ca4-calmodulin complex
    var Ca4CaM: micromolar {init: 0.1, pub: out};
    var CaMKIItot: micromolar {pub: in};
    var Reaction_24: flux {pub: in};
    var Reaction_4CaN: flux {pub: in};
    var Reaction_4B: flux {pub: in};
    var Reaction_CKta: first_order_rate_constant {pub: in};
    var Reaction_CKib: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Ca4CaM, time) = 1E-3{dimensionless}*(CaMKIItot*(Reaction_CKta-Reaction_CKib)+Reaction_24-(Reaction_4CaN+Reaction_4B));
  enddef;

  def comp CaMB as
    // CaMB
    //
    // buffer-calmodulin complex
    var CaMB: micromolar {init: 0.1, pub: out};
    var Reaction_02B: flux {pub: in};
    var Reaction_0B: flux {pub: in};
    var time: second {pub: in};
    ode(CaMB, time) = 1E-3{dimensionless}*(Reaction_0B-Reaction_02B);
  enddef;

  def comp Ca2CaMB as
    // Ca2CaMB
    //
    // buffer-2calcium-calmodulin complex
    var Ca2CaMB: micromolar {init: 0.1, pub: out};
    var Reaction_02B: flux {pub: in};
    var Reaction_2B: flux {pub: in};
    var Reaction_24B: flux {pub: in};
    var time: second {pub: in};
    ode(Ca2CaMB, time) = 1E-3{dimensionless}*(Reaction_02B+Reaction_2B-Reaction_24B);
  enddef;

  def comp Ca4CaMB as
    // Ca4CaMB
    //
    // buffer-4calcium-calmodulin complex
    var Ca4CaMB: micromolar {init: 0.1, pub: out};
    var Reaction_4B: flux {pub: in};
    var Reaction_24B: flux {pub: in};
    var time: second {pub: in};
    ode(Ca4CaMB, time) = 1E-3{dimensionless}*(Reaction_24B+Reaction_4B);
  enddef;
  // CaMKII activation

  def comp CaMKIIi as
    // CaMKIIi
    //
    // The total concentration of CaMKII subunits in state I
    var CaMKIIi: micromolar;
    var Pi: dimensionless {pub: in};
    var CaMKIItot: micromolar {pub: in};
    CaMKIIi = Pi*CaMKIItot;
  enddef;

  def comp CaMKIIb2 as
    // CaMKIIb2
    //
    // The total concentration of CaMKII subunits in state B2
    var CaMKIIb2: micromolar;
    var Pb2: dimensionless {pub: in};
    var CaMKIItot: micromolar {pub: in};
    CaMKIIb2 = Pb2*CaMKIItot;
  enddef;

  def comp CaMKIIb as
    // CaMKIIb
    //
    // The total concentration of CaMKII subunits in state B
    var CaMKIIb: micromolar;
    var Pb: dimensionless {pub: in};
    var CaMKIItot: micromolar {pub: in};
    CaMKIIb = Pb*CaMKIItot;
  enddef;

  def comp CaMKIIt as
    // CaMKIIt
    //
    // The total concentration of CaMKII subunits in state T
    var CaMKIIt: micromolar;
    var Pt: dimensionless {pub: in};
    var CaMKIItot: micromolar {pub: in};
    CaMKIIt = Pt*CaMKIItot;
  enddef;

  def comp CaMKIIt2 as
    // CaMKIIt2
    //
    // The total concentration of CaMKII subunits in state T2
    var CaMKIIt2: micromolar;
    var Pt2: dimensionless {pub: in};
    var CaMKIItot: micromolar {pub: in};
    CaMKIIt2 = Pt2*CaMKIItot;
  enddef;

  def comp CaMKIIa as
    // CaMKIIa
    //
    // The total concentration of CaMKII subunits in state A
    var CaMKIIa: micromolar;
    var Pa: dimensionless {pub: in};
    var CaMKIItot: micromolar {pub: in};
    CaMKIIa = Pa*CaMKIItot;
  enddef;

  def comp Pi as
    // Pi
    //
    // The probability of a given CaMKII subunit being in state I
    var Pi: dimensionless {pub: out};
    var Pb: dimensionless {pub: in};
    var Pb2: dimensionless {pub: in};
    var Pt: dimensionless {pub: in};
    var Pt2: dimensionless {pub: in};
    var Pa: dimensionless {pub: in};
    Pi = 1.0{dimensionless}-(Pb+Pb2+Pt+Pt2+Pa);
  enddef;

  def comp T as
    var T: dimensionless {pub: out};
    var Pb: dimensionless {pub: in};
    var Pt: dimensionless {pub: in};
    var Pt2: dimensionless {pub: in};
    var Pa: dimensionless {pub: in};
    T = Pb+Pt+Pt2+Pa;
  enddef;

  def comp Reaction_CKbt as
    var Reaction_CKbt: first_order_rate_constant {pub: out};
    var kbt: first_order_rate_constant;
    var kPP1: first_order_rate_constant {pub: in};
    var KmPP1: micromolar {pub: in};
    var PP1tot: micromolar {pub: in};
    var CaMKIItot: micromolar {pub: in};
    var T: dimensionless {pub: in};
    var Pt: dimensionless {pub: in};
    var Pb: dimensionless {pub: in};
    kbt = 0.055{first_order_rate_constant}*T+0.0074{first_order_rate_constant}*sqr(T)+0.015{first_order_rate_constant}*pow(T, 3.0{dimensionless});
    Reaction_CKbt = kbt*Pb-kPP1*PP1tot*Pt/(KmPP1+CaMKIItot*Pt);
  enddef;

  def comp Reaction_CKib2 as
    // Reaction_CKib2
    //
    // Ca2CaM dissociation from Pb2 and association with Pi
    var Reaction_CKib2: first_order_rate_constant {pub: out};
    var kib2: second_order_rate_constant {init: 65.67};
    var kb2i: first_order_rate_constant {init: 328.36};
    var Ca2CaM: micromolar {pub: in};
    var Pi: dimensionless {pub: in};
    var Pb2: dimensionless {pub: in};
    Reaction_CKib2 = kib2*Ca2CaM*Pi-kb2i*Pb2;
  enddef;

  def comp Reaction_CKb2b as
    // Reaction_CKb2b
    //
    // Ca dissociation from Pb and association with Pb2
    var Reaction_CKb2b: first_order_rate_constant {pub: out};
    var kb24: third_order_rate_constant;
    var kb42: first_order_rate_constant;
    var k24: third_order_rate_constant {pub: in};
    var k42: first_order_rate_constant {pub: in};
    var Ca: micromolar {pub: in};
    var Pb: dimensionless {pub: in};
    var Pb2: dimensionless {pub: in};
    Reaction_CKb2b = kb24*sqr(Ca)*Pb2-kb42*Pb2;
    kb24 = k24;
    kb42 = k42*(33.5E-3{dimensionless}/5.0{dimensionless});
  enddef;

  def comp Reaction_CKib as
    // Reaction_CKib
    //
    // Ca4CaM dissociation from Pb and association with Pi
    var Reaction_CKib: first_order_rate_constant {pub: out};
    var kib: second_order_rate_constant {init: 6.567};
    var kbi: first_order_rate_constant {init: 2.2};
    var Ca4CaM: micromolar {pub: in};
    var Pi: dimensionless {pub: in};
    var Pb: dimensionless {pub: in};
    Reaction_CKib = kib*Ca4CaM*Pi-kbi*Pb;
  enddef;

  def comp Reaction_CKtt2 as
    // Reaction_CKtt2
    //
    // Ca dissociation from Pt and association with Pt2
    var Reaction_CKtt2: first_order_rate_constant {pub: out};
    var kt24: third_order_rate_constant;
    var kt42: first_order_rate_constant;
    var k24: third_order_rate_constant {pub: in};
    var k42: first_order_rate_constant {pub: in};
    var Ca: micromolar {pub: in};
    var Pt: dimensionless {pub: in};
    var Pt2: dimensionless {pub: in};
    Reaction_CKtt2 = kt42*Pt-kt24*sqr(Ca)*Pt2;
    kt24 = k24;
    kt42 = k42*(33.5E-6{dimensionless}/5.0{dimensionless});
  enddef;

  def comp Reaction_CKta as
    // Reaction_CKta
    //
    // Ca4CaM dissociation from Pt and association with Pa
    var Reaction_CKta: first_order_rate_constant {pub: out};
    var kat: second_order_rate_constant {init: 6.567};
    var kta: first_order_rate_constant {init: 0.0022};
    var Ca4CaM: micromolar {pub: in};
    var Pt: dimensionless {pub: in};
    var Pa: dimensionless {pub: in};
    Reaction_CKta = kta*Pt-kat*Ca4CaM*Pa;
  enddef;

  def comp Reaction_CKt2a as
    // Reaction_CKt2a
    //
    // Ca2CaM dissociation from Pt and association with Pa
    var Reaction_CKt2a: first_order_rate_constant {pub: out};
    var kat2: second_order_rate_constant {init: 6.567};
    var kt2a: first_order_rate_constant {init: 32.835};
    var Ca2CaM: micromolar {pub: in};
    var Pt2: dimensionless {pub: in};
    var Pa: dimensionless {pub: in};
    Reaction_CKt2a = kt2a*Pt2-kat2*Ca2CaM*Pa;
  enddef;

  def comp Reaction_CKt2b2 as
    var Reaction_CKt2b2: first_order_rate_constant {pub: out};
    var kPP1: first_order_rate_constant {pub: in};
    var KmPP1: micromolar {pub: in};
    var PP1tot: micromolar {pub: in};
    var CaMKIItot: micromolar {pub: in};
    var Pt2: dimensionless {pub: in};
    Reaction_CKt2b2 = kPP1*PP1tot*Pt2/(KmPP1+CaMKIItot*Pt2);
  enddef;

  def comp Reaction_CKai as
    var Reaction_CKai: first_order_rate_constant {pub: out};
    var kPP1: first_order_rate_constant {pub: in};
    var KmPP1: micromolar {pub: in};
    var PP1tot: micromolar {pub: in};
    var CaMKIItot: micromolar {pub: in};
    var Pa: dimensionless {pub: in};
    Reaction_CKai = kPP1*PP1tot*Pa/(KmPP1+CaMKIItot*Pa);
  enddef;

  def comp Pb2 as
    // Pb2
    //
    // The probability of a given CaMKII subunit being in state B2
    var Pb2: dimensionless {init: 0.1, pub: out};
    var Reaction_CKib2: first_order_rate_constant {pub: in};
    var Reaction_CKb2b: first_order_rate_constant {pub: in};
    var Reaction_CKt2b2: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Pb2, time) = 1E-3{dimensionless}*(Reaction_CKt2b2-(Reaction_CKib2+Reaction_CKb2b));
  enddef;

  def comp Pb as
    // Pb
    //
    // The probability of a given CaMKII subunit being in state B
    var Pb: dimensionless {init: 0.1, pub: out};
    var Reaction_CKib: first_order_rate_constant {pub: in};
    var Reaction_CKb2b: first_order_rate_constant {pub: in};
    var Reaction_CKbt: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Pb, time) = 1E-3{dimensionless}*(Reaction_CKib+Reaction_CKb2b-Reaction_CKbt);
  enddef;

  def comp Pt as
    // Pt
    //
    // The probability of a given CaMKII subunit being in state T
    var Pt: dimensionless {init: 0.1, pub: out};
    var Reaction_CKta: first_order_rate_constant {pub: in};
    var Reaction_CKtt2: first_order_rate_constant {pub: in};
    var Reaction_CKbt: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Pt, time) = 1E-3{dimensionless}*(-(Reaction_CKbt+Reaction_CKta+Reaction_CKtt2));
  enddef;

  def comp Pt2 as
    // Pt2
    //
    // The probability of a given CaMKII subunit being in state T2
    var Pt2: dimensionless {init: 0.1, pub: out};
    var Reaction_CKt2a: first_order_rate_constant {pub: in};
    var Reaction_CKtt2: first_order_rate_constant {pub: in};
    var Reaction_CKt2b2: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Pt2, time) = 1E-3{dimensionless}*(-(Reaction_CKtt2+Reaction_CKt2a+Reaction_CKt2b2));
  enddef;

  def comp Pa as
    // Pa
    //
    // The probability of a given CaMKII subunit being in state A
    var Pa: dimensionless {init: 0.1, pub: out};
    var Reaction_CKta: first_order_rate_constant {pub: in};
    var Reaction_CKt2a: first_order_rate_constant {pub: in};
    var Reaction_CKai: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Pa, time) = 1E-3{dimensionless}*(Reaction_CKta+Reaction_CKt2a-Reaction_CKai);
  enddef;
  // Calcineurin activation

  def comp Ca2CaN as
    // Ca2CaN
    //
    // Concentration of calcium bound to calcineurin
    var Ca2CaN: micromolar {pub: out};
    var CaNtot: micromolar {init: 3.62};
    var Ca4CaN: micromolar {pub: in};
    var CaMCaN: micromolar {pub: in};
    var Ca2CaMCaN: micromolar {pub: in};
    var Ca4CaMCaN: micromolar {pub: in};
    Ca2CaN = CaNtot-(Ca4CaN+CaMCaN+Ca2CaMCaN+Ca4CaMCaN);
  enddef;

  def comp Reaction_Ca4CaN as
    // Reaction_Ca4CaN
    //
    // Ca binding to Ca2CaN
    var Reaction_Ca4CaN: flux {pub: out};
    var kCaNCa_on: third_order_rate_constant {init: 2.0};
    var kCaNCa_off: first_order_rate_constant {init: 1.0};
    var Ca: micromolar {pub: in};
    var Ca2CaN: micromolar {pub: in};
    var Ca4CaN: micromolar {pub: in};
    Reaction_Ca4CaN = kCaNCa_on*sqr(Ca)*Ca2CaN-kCaNCa_off*Ca4CaN;
  enddef;

  def comp Reaction_02CaN as
    // Reaction_02CaN
    //
    // Ca binding to CaMCaN
    var Reaction_02CaN: flux {pub: out};
    var k02CaN: third_order_rate_constant;
    var k20CaN: first_order_rate_constant;
    var k02: third_order_rate_constant {pub: in};
    var k20: first_order_rate_constant {pub: in};
    var Ca: micromolar {pub: in};
    var CaMCaN: micromolar {pub: in};
    var Ca2CaMCaN: micromolar {pub: in};
    Reaction_02CaN = k02CaN*sqr(Ca)*CaMCaN-k20CaN*Ca2CaMCaN;
    k02CaN = k02;
    k20CaN = k20/160.0{dimensionless};
  enddef;

  def comp Reaction_24CaN as
    // Reaction_24CaN
    //
    // Ca binding to Ca2CaMCaN
    var Reaction_24CaN: flux {pub: out};
    var k24CaN: third_order_rate_constant;
    var k42CaN: first_order_rate_constant;
    var k24: third_order_rate_constant {pub: in};
    var k42: first_order_rate_constant {pub: in};
    var Ca: micromolar {pub: in};
    var Ca2CaMCaN: micromolar {pub: in};
    var Ca4CaMCaN: micromolar {pub: in};
    Reaction_24CaN = k24CaN*sqr(Ca)*Ca2CaMCaN-k42CaN*Ca4CaMCaN;
    k24CaN = k24;
    k42CaN = k42/2508.0{dimensionless};
  enddef;

  def comp Reaction_0CaN as
    // Reaction_0CaN
    //
    // CaM binding to Ca4CaN
    var Reaction_0CaN: flux {pub: out};
    var kCaN0_on: second_order_rate_constant {init: 46.0};
    var kCaN0_off: first_order_rate_constant {init: 537.966};
    var CaM: micromolar {pub: in};
    var Ca4CaN: micromolar {pub: in};
    var CaMCaN: micromolar {pub: in};
    Reaction_0CaN = kCaN0_on*CaM*Ca4CaN-kCaN0_off*CaMCaN;
  enddef;

  def comp Reaction_2CaN as
    // Reaction_2CaN
    //
    // Ca2CaM binding to Ca4CaN
    var Reaction_2CaN: flux {pub: out};
    var kCaN2_on: second_order_rate_constant {init: 46.0};
    var kCaN2_off: first_order_rate_constant {init: 3.2604};
    var Ca2CaM: micromolar {pub: in};
    var Ca4CaN: micromolar {pub: in};
    var Ca2CaMCaN: micromolar {pub: in};
    Reaction_2CaN = kCaN2_on*Ca2CaM*Ca4CaN-kCaN2_off*Ca2CaMCaN;
  enddef;

  def comp Reaction_4CaN as
    // Reaction_4CaN
    //
    // Ca4CaM binding to Ca4CaN
    var Reaction_4CaN: flux {pub: out};
    var kCaN4_on: second_order_rate_constant {init: 46.0};
    var kCaN4_off: first_order_rate_constant {init: 1.3E-3};
    var Ca4CaM: micromolar {pub: in};
    var Ca4CaN: micromolar {pub: in};
    var Ca4CaMCaN: micromolar {pub: in};
    Reaction_4CaN = kCaN4_on*Ca4CaM*Ca4CaN-kCaN4_off*Ca4CaMCaN;
  enddef;

  def comp Ca4CaN as
    // Ca4CaN
    //
    // Concentration of calcium-calcineurin complex
    var Ca4CaN: micromolar {init: 0.1, pub: out};
    var Reaction_Ca4CaN: flux {pub: in};
    var Reaction_0CaN: flux {pub: in};
    var Reaction_2CaN: flux {pub: in};
    var Reaction_4CaN: flux {pub: in};
    var time: second {pub: in};
    ode(Ca4CaN, time) = 1E-3{dimensionless}*(Reaction_Ca4CaN-(Reaction_0CaN+Reaction_2CaN+Reaction_4CaN));
  enddef;

  def comp CaMCaN as
    // CaMCaN
    //
    // Concentration of calmodulin-calcineurin complex
    var CaMCaN: micromolar {init: 0.1, pub: out};
    var Reaction_0CaN: flux {pub: in};
    var Reaction_02CaN: flux {pub: in};
    var time: second {pub: in};
    ode(CaMCaN, time) = 1E-3{dimensionless}*(Reaction_0CaN-Reaction_02CaN);
  enddef;

  def comp Ca2CaMCaN as
    // Ca2CaMCaN
    //
    // Concentration of calcium2-calmodulin-calcineurin complex
    var Ca2CaMCaN: micromolar {init: 0.1, pub: out};
    var Reaction_24CaN: flux {pub: in};
    var Reaction_02CaN: flux {pub: in};
    var Reaction_2CaN: flux {pub: in};
    var time: second {pub: in};
    ode(Ca2CaMCaN, time) = 1E-3{dimensionless}*(Reaction_2CaN+Reaction_02CaN-Reaction_24CaN);
  enddef;

  def comp Ca4CaMCaN as
    // Ca4CaMCaN
    //
    // Concentration of calcium4-calmodulin-calcineurin complex
    var Ca4CaMCaN: micromolar {init: 0.1, pub: out};
    var Reaction_24CaN: flux {pub: in};
    var Reaction_4CaN: flux {pub: in};
    var time: second {pub: in};
    ode(Ca4CaMCaN, time) = 1E-3{dimensionless}*(Reaction_4CaN+Reaction_24CaN);
  enddef;

  def comp model_parameters as
    var CaMKIItot: micromolar {init: 120.0, pub: out};
    var PP1tot: micromolar {init: 96.5, pub: out};
    var kPP1: first_order_rate_constant {init: 1.72, pub: out};
    var KmPP1: micromolar {init: 11.5, pub: out};
    var Mg: micromolar {init: 1, pub: out};
    var K: micromolar {init: 135, pub: out};
    var Ca: micromolar {init: 1, pub: out};
  enddef;
  // encapsulation grouping to facilitate model import

  def group as encapsulation for
    comp dyadic_cleft incl
      comp Reaction_02;
      comp Reaction_24;
      comp Reaction_02B;
      comp Reaction_24B;
      comp Reaction_2B;
      comp Reaction_0B;
      comp Reaction_4B;
      comp B;
      comp CaM;
      comp Ca2CaM;
      comp Ca4CaM;
      comp CaMB;
      comp Ca2CaMB;
      comp Ca4CaMB;
      comp CaMKIIi;
      comp CaMKIIb2;
      comp CaMKIIb;
      comp CaMKIIt;
      comp CaMKIIt2;
      comp CaMKIIa;
      comp Pi;
      comp T;
      comp Reaction_CKbt;
      comp Reaction_CKib2;
      comp Reaction_CKb2b;
      comp Reaction_CKib;
      comp Reaction_CKtt2;
      comp Reaction_CKta;
      comp Reaction_CKt2a;
      comp Reaction_CKt2b2;
      comp Reaction_CKai;
      comp Pb2;
      comp Pb;
      comp Pt;
      comp Pt2;
      comp Pa;
      comp Ca2CaN;
      comp Reaction_Ca4CaN;
      comp Reaction_02CaN;
      comp Reaction_24CaN;
      comp Reaction_2CaN;
      comp Reaction_4CaN;
      comp Reaction_0CaN;
      comp Ca4CaN;
      comp CaMCaN;
      comp Ca2CaMCaN;
      comp Ca4CaMCaN;
      comp model_parameters;
    endcomp;
  enddef;
  // connections
  def map between model_parameters and Reaction_02 for
    vars K and K;
    vars Mg and Mg;
    vars Ca and Ca;
  enddef;
  def map between CaM and Reaction_02 for
    vars CaM and CaM;
    vars Reaction_02 and Reaction_02;
  enddef;
  def map between Ca2CaM and Reaction_02 for
    vars Ca2CaM and Ca2CaM;
    vars Reaction_02 and Reaction_02;
  enddef;
  def map between model_parameters and Reaction_24 for
    vars K and K;
    vars Mg and Mg;
    vars Ca and Ca;
  enddef;
  def map between Ca4CaM and Reaction_24 for
    vars Ca4CaM and Ca4CaM;
    vars Reaction_24 and Reaction_24;
  enddef;
  def map between Ca2CaM and Reaction_24 for
    vars Ca2CaM and Ca2CaM;
    vars Reaction_24 and Reaction_24;
  enddef;
  def map between Reaction_02 and Reaction_02B for
    vars k02 and k02;
  enddef;
  def map between model_parameters and Reaction_02B for
    vars Ca and Ca;
  enddef;
  def map between CaMB and Reaction_02B for
    vars CaMB and CaMB;
    vars Reaction_02B and Reaction_02B;
  enddef;
  def map between Ca2CaMB and Reaction_02B for
    vars Ca2CaMB and Ca2CaMB;
    vars Reaction_02B and Reaction_02B;
  enddef;
  def map between Reaction_24 and Reaction_24B for
    vars k24 and k24;
    vars k42 and k42;
  enddef;
  def map between model_parameters and Reaction_24B for
    vars Ca and Ca;
  enddef;
  def map between Ca2CaMB and Reaction_24B for
    vars Ca2CaMB and Ca2CaMB;
    vars Reaction_24B and Reaction_24B;
  enddef;
  def map between Ca4CaMB and Reaction_24B for
    vars Ca4CaMB and Ca4CaMB;
    vars Reaction_24B and Reaction_24B;
  enddef;
  def map between B and Reaction_0B for
    vars B and B;
  enddef;
  def map between CaM and Reaction_0B for
    vars CaM and CaM;
    vars Reaction_0B and Reaction_0B;
  enddef;
  def map between CaMB and Reaction_0B for
    vars CaMB and CaMB;
    vars Reaction_0B and Reaction_0B;
  enddef;
  def map between B and Reaction_2B for
    vars B and B;
  enddef;
  def map between Ca2CaM and Reaction_2B for
    vars Ca2CaM and Ca2CaM;
    vars Reaction_2B and Reaction_2B;
  enddef;
  def map between Ca2CaMB and Reaction_2B for
    vars Ca2CaMB and Ca2CaMB;
    vars Reaction_2B and Reaction_2B;
  enddef;
  def map between B and Reaction_4B for
    vars B and B;
  enddef;
  def map between Ca4CaM and Reaction_4B for
    vars Ca4CaM and Ca4CaM;
    vars Reaction_4B and Reaction_4B;
  enddef;
  def map between Ca4CaMB and Reaction_4B for
    vars Ca4CaMB and Ca4CaMB;
    vars Reaction_4B and Reaction_4B;
  enddef;
  def map between CaMB and B for
    vars CaMB and CaMB;
  enddef;
  def map between Ca2CaMB and B for
    vars Ca2CaMB and Ca2CaMB;
  enddef;
  def map between Ca4CaMB and B for
    vars Ca4CaMB and Ca4CaMB;
  enddef;
  def map between Reaction_0CaN and CaM for
    vars CaM and CaM;
    vars Reaction_0CaN and Reaction_0CaN;
  enddef;
  def map between model_parameters and Ca2CaM for
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Reaction_2CaN and Ca2CaM for
    vars Ca2CaM and Ca2CaM;
    vars Reaction_2CaN and Reaction_2CaN;
  enddef;
  def map between Reaction_CKt2a and Ca2CaM for
    vars Ca2CaM and Ca2CaM;
    vars Reaction_CKt2a and Reaction_CKt2a;
  enddef;
  def map between Reaction_CKib2 and Ca2CaM for
    vars Ca2CaM and Ca2CaM;
    vars Reaction_CKib2 and Reaction_CKib2;
  enddef;
  def map between model_parameters and Ca4CaM for
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Reaction_CKta and Ca4CaM for
    vars Ca4CaM and Ca4CaM;
    vars Reaction_CKta and Reaction_CKta;
  enddef;
  def map between Reaction_CKib and Ca4CaM for
    vars Ca4CaM and Ca4CaM;
    vars Reaction_CKib and Reaction_CKib;
  enddef;
  def map between Pi and CaMKIIi for
    vars Pi and Pi;
  enddef;
  def map between model_parameters and CaMKIIi for
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Pb2 and CaMKIIb2 for
    vars Pb2 and Pb2;
  enddef;
  def map between model_parameters and CaMKIIb2 for
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Pb and CaMKIIb for
    vars Pb and Pb;
  enddef;
  def map between model_parameters and CaMKIIb for
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Pt2 and CaMKIIt2 for
    vars Pt2 and Pt2;
  enddef;
  def map between model_parameters and CaMKIIt2 for
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Pt and CaMKIIt for
    vars Pt and Pt;
  enddef;
  def map between model_parameters and CaMKIIt for
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Pa and CaMKIIa for
    vars Pa and Pa;
  enddef;
  def map between model_parameters and CaMKIIa for
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Pb and Pi for
    vars Pb and Pb;
  enddef;
  def map between Pb2 and Pi for
    vars Pb2 and Pb2;
  enddef;
  def map between Pt and Pi for
    vars Pt and Pt;
  enddef;
  def map between Pt2 and Pi for
    vars Pt2 and Pt2;
  enddef;
  def map between Pa and Pi for
    vars Pa and Pa;
  enddef;
  def map between Pb and T for
    vars Pb and Pb;
  enddef;
  def map between Pt and T for
    vars Pt and Pt;
  enddef;
  def map between Pt2 and T for
    vars Pt2 and Pt2;
  enddef;
  def map between Pa and T for
    vars Pa and Pa;
  enddef;
  def map between model_parameters and Reaction_CKbt for
    vars kPP1 and kPP1;
    vars KmPP1 and KmPP1;
    vars PP1tot and PP1tot;
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Pt and Reaction_CKbt for
    vars Pt and Pt;
    vars Reaction_CKbt and Reaction_CKbt;
  enddef;
  def map between Pb and Reaction_CKbt for
    vars Pb and Pb;
    vars Reaction_CKbt and Reaction_CKbt;
  enddef;
  def map between T and Reaction_CKbt for
    vars T and T;
  enddef;
  def map between Pi and Reaction_CKib2 for
    vars Pi and Pi;
  enddef;
  def map between Pb2 and Reaction_CKib2 for
    vars Pb2 and Pb2;
    vars Reaction_CKib2 and Reaction_CKib2;
  enddef;
  def map between model_parameters and Reaction_CKb2b for
    vars Ca and Ca;
  enddef;
  def map between Pb and Reaction_CKb2b for
    vars Pb and Pb;
    vars Reaction_CKb2b and Reaction_CKb2b;
  enddef;
  def map between Pb2 and Reaction_CKb2b for
    vars Pb2 and Pb2;
    vars Reaction_CKb2b and Reaction_CKb2b;
  enddef;
  def map between Reaction_24 and Reaction_CKb2b for
    vars k24 and k24;
    vars k42 and k42;
  enddef;
  def map between Pb and Reaction_CKib for
    vars Pb and Pb;
    vars Reaction_CKib and Reaction_CKib;
  enddef;
  def map between Pi and Reaction_CKib for
    vars Pi and Pi;
  enddef;
  def map between model_parameters and Reaction_CKtt2 for
    vars Ca and Ca;
  enddef;
  def map between Pt and Reaction_CKtt2 for
    vars Pt and Pt;
    vars Reaction_CKtt2 and Reaction_CKtt2;
  enddef;
  def map between Pt2 and Reaction_CKtt2 for
    vars Pt2 and Pt2;
    vars Reaction_CKtt2 and Reaction_CKtt2;
  enddef;
  def map between Reaction_24 and Reaction_CKtt2 for
    vars k24 and k24;
    vars k42 and k42;
  enddef;
  def map between Pt and Reaction_CKta for
    vars Pt and Pt;
    vars Reaction_CKta and Reaction_CKta;
  enddef;
  def map between Pa and Reaction_CKta for
    vars Pa and Pa;
    vars Reaction_CKta and Reaction_CKta;
  enddef;
  def map between Pt2 and Reaction_CKt2a for
    vars Pt2 and Pt2;
    vars Reaction_CKt2a and Reaction_CKt2a;
  enddef;
  def map between Pa and Reaction_CKt2a for
    vars Pa and Pa;
    vars Reaction_CKt2a and Reaction_CKt2a;
  enddef;
  def map between model_parameters and Reaction_CKt2b2 for
    vars kPP1 and kPP1;
    vars KmPP1 and KmPP1;
    vars PP1tot and PP1tot;
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Pt2 and Reaction_CKt2b2 for
    vars Pt2 and Pt2;
    vars Reaction_CKt2b2 and Reaction_CKt2b2;
  enddef;
  def map between Pb2 and Reaction_CKt2b2 for
    vars Reaction_CKt2b2 and Reaction_CKt2b2;
  enddef;
  def map between model_parameters and Reaction_CKai for
    vars kPP1 and kPP1;
    vars KmPP1 and KmPP1;
    vars PP1tot and PP1tot;
    vars CaMKIItot and CaMKIItot;
  enddef;
  def map between Pa and Reaction_CKai for
    vars Pa and Pa;
    vars Reaction_CKai and Reaction_CKai;
  enddef;
  def map between Ca4CaN and Ca2CaN for
    vars Ca4CaN and Ca4CaN;
  enddef;
  def map between CaMCaN and Ca2CaN for
    vars CaMCaN and CaMCaN;
  enddef;
  def map between Ca2CaMCaN and Ca2CaN for
    vars Ca2CaMCaN and Ca2CaMCaN;
  enddef;
  def map between Ca4CaMCaN and Ca2CaN for
    vars Ca4CaMCaN and Ca4CaMCaN;
  enddef;
  def map between model_parameters and Reaction_Ca4CaN for
    vars Ca and Ca;
  enddef;
  def map between Ca4CaN and Reaction_Ca4CaN for
    vars Ca4CaN and Ca4CaN;
    vars Reaction_Ca4CaN and Reaction_Ca4CaN;
  enddef;
  def map between Ca2CaN and Reaction_Ca4CaN for
    vars Ca2CaN and Ca2CaN;
  enddef;
  def map between model_parameters and Reaction_02CaN for
    vars Ca and Ca;
  enddef;
  def map between CaMCaN and Reaction_02CaN for
    vars CaMCaN and CaMCaN;
    vars Reaction_02CaN and Reaction_02CaN;
  enddef;
  def map between Ca2CaMCaN and Reaction_02CaN for
    vars Ca2CaMCaN and Ca2CaMCaN;
    vars Reaction_02CaN and Reaction_02CaN;
  enddef;
  def map between Reaction_02 and Reaction_02CaN for
    vars k02 and k02;
    vars k20 and k20;
  enddef;
  def map between model_parameters and Reaction_24CaN for
    vars Ca and Ca;
  enddef;
  def map between Ca4CaMCaN and Reaction_24CaN for
    vars Ca4CaMCaN and Ca4CaMCaN;
    vars Reaction_24CaN and Reaction_24CaN;
  enddef;
  def map between Ca2CaMCaN and Reaction_24CaN for
    vars Ca2CaMCaN and Ca2CaMCaN;
    vars Reaction_24CaN and Reaction_24CaN;
  enddef;
  def map between Reaction_24 and Reaction_24CaN for
    vars k24 and k24;
    vars k42 and k42;
  enddef;
  def map between Ca4CaN and Reaction_2CaN for
    vars Ca4CaN and Ca4CaN;
    vars Reaction_2CaN and Reaction_2CaN;
  enddef;
  def map between Ca2CaMCaN and Reaction_2CaN for
    vars Ca2CaMCaN and Ca2CaMCaN;
    vars Reaction_2CaN and Reaction_2CaN;
  enddef;
  def map between Ca4CaM and Reaction_4CaN for
    vars Ca4CaM and Ca4CaM;
    vars Reaction_4CaN and Reaction_4CaN;
  enddef;
  def map between Ca4CaN and Reaction_4CaN for
    vars Ca4CaN and Ca4CaN;
    vars Reaction_4CaN and Reaction_4CaN;
  enddef;
  def map between Ca4CaMCaN and Reaction_4CaN for
    vars Ca4CaMCaN and Ca4CaMCaN;
    vars Reaction_4CaN and Reaction_4CaN;
  enddef;
  def map between Ca4CaN and Reaction_0CaN for
    vars Ca4CaN and Ca4CaN;
    vars Reaction_0CaN and Reaction_0CaN;
  enddef;
  def map between CaMCaN and Reaction_0CaN for
    vars CaMCaN and CaMCaN;
    vars Reaction_0CaN and Reaction_0CaN;
  enddef;
enddef;
