<?xml version="1.0"?>
<!--
This CellML file was generated on 10/10/2011 at 4:36:34 at PM using:

COR (0.9.31.1409)
Copyright 2002-2011 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="dupont_erneux_1997" name="dupont_erneux_1997">





   <units name="micromole">
      <unit prefix="micro" units="mole"/>
   </units>
   <units name="micromolar">
      <unit units="micromole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="per_micromolar">
      <unit exponent="-1" units="micromolar"/>
   </units>
   <units name="micromolar_per_second">
      <unit units="micromolar"/>
      <unit exponent="-1" units="second"/>
   </units>
   <units name="per_micromolar_per_second">
      <unit exponent="-1" units="micromolar"/>
      <unit exponent="-1" units="second"/>
   </units>
   <units name="per_second">
      <unit exponent="-1" units="second"/>
   </units>
   <component name="environment" cmeta:id="component0000">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="second"/>
   </component>
   <component name="R_des" cmeta:id="component0001">
      <variable cmeta:id="R_des_R_des" initial_value="0.1" name="R_des" public_interface="out" units="micromolar"/>
      <variable name="K_plus" public_interface="in" units="per_micromolar_per_second" cmeta:id="variable0000"/>
      <variable name="C_cyto" public_interface="in" units="micromolar" cmeta:id="variable0001"/>
      <variable name="n_i" public_interface="in" units="dimensionless" cmeta:id="variable0002"/>
      <variable name="K_act" public_interface="in" units="micromolar" cmeta:id="variable0003"/>
      <variable name="n_a" public_interface="in" units="dimensionless" cmeta:id="variable0004"/>
      <variable name="K_minus" public_interface="in" units="per_second" cmeta:id="variable0005"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0006"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>R_des</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>K_plus</ci>
                  <apply>
                     <power/>
                     <ci>C_cyto</ci>
                     <ci>n_i</ci>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micromolar">1</cn>
                           <ci>R_des</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micromolar">1</cn>
                           <apply>
                              <power/>
                              <apply>
                                 <divide/>
                                 <ci>C_cyto</ci>
                                 <ci>K_act</ci>
                              </apply>
                              <ci>n_a</ci>
                           </apply>
                        </apply>
                     </apply>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_second">1</cn>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>K_minus</ci>
                  <ci>R_des</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="C_cyto" cmeta:id="component0002">
      <variable cmeta:id="C_cyto_C_cyto" initial_value="0.1" name="C_cyto" public_interface="out" units="micromolar"/>
      <variable name="K_1" public_interface="in" units="per_second" cmeta:id="variable0007"/>
      <variable name="b" public_interface="in" units="per_second" cmeta:id="variable0008"/>
      <variable name="n_i" public_interface="in" units="dimensionless" cmeta:id="variable0009"/>
      <variable name="I_ra" public_interface="in" units="micromolar" cmeta:id="variable0010"/>
      <variable name="Ca_tot" public_interface="in" units="micromolar" cmeta:id="variable0011"/>
      <variable name="alpha" public_interface="in" units="dimensionless" cmeta:id="variable0012"/>
      <variable name="V_MP" public_interface="in" units="micromolar_per_second" cmeta:id="variable0013"/>
      <variable name="n_p" public_interface="in" units="dimensionless" cmeta:id="variable0014"/>
      <variable name="K_p" public_interface="in" units="micromolar" cmeta:id="variable0015"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0016"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_cyto</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>K_1</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <ci>b</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
                     </apply>
                     <apply>
                        <times/>
                        <ci>I_ra</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micromolar">1</cn>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>Ca_tot</ci>
                        <apply>
                           <times/>
                           <ci>C_cyto</ci>
                           <apply>
                              <plus/>
                              <ci>alpha</ci>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                           </apply>
                        </apply>
                     </apply>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_second">1</cn>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>V_MP</ci>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <apply>
                           <power/>
                           <ci>C_cyto</ci>
                           <ci>n_p</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <apply>
                              <power/>
                              <ci>K_p</ci>
                              <ci>n_p</ci>
                           </apply>
                           <apply>
                              <power/>
                              <ci>C_cyto</ci>
                              <ci>n_p</ci>
                           </apply>
                        </apply>
                     </apply>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_micromolar">1</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="I_ra" cmeta:id="component0003">
      <variable cmeta:id="I_ra_I_ra" name="I_ra" public_interface="out" units="micromolar"/>
      <variable name="I_rable" public_interface="in" units="micromolar" cmeta:id="variable0017"/>
      <variable name="K_act" public_interface="in" units="micromolar" cmeta:id="variable0018"/>
      <variable name="C_cyto" public_interface="in" units="micromolar" cmeta:id="variable0019"/>
      <variable name="n_a" public_interface="in" units="dimensionless" cmeta:id="variable0020"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0021"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_ra</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>I_rable</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
               </apply>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <power/>
                     <apply>
                        <divide/>
                        <ci>K_act</ci>
                        <ci>C_cyto</ci>
                     </apply>
                     <ci>n_a</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="I_rable" cmeta:id="component0004">
      <variable cmeta:id="I_rable_I_rable" name="I_rable" public_interface="out" units="micromolar"/>
      <variable name="R_des" public_interface="in" units="micromolar" cmeta:id="variable0022"/>
      <variable name="IP3" public_interface="in" units="micromolar" cmeta:id="variable0023"/>
      <variable name="K_IP" public_interface="in" units="micromolar" cmeta:id="variable0024"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0025"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_rable</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="micromolar">1</cn>
                     <ci>R_des</ci>
                  </apply>
                  <ci>IP3</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>K_IP</ci>
                  <ci>IP3</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="IP3" cmeta:id="component0005">
      <variable cmeta:id="IP3_IP3" initial_value="0.1" name="IP3" public_interface="out" units="micromolar"/>
      <variable name="V_PLC" public_interface="in" units="micromolar" cmeta:id="variable0026"/>
      <variable name="V_3K" public_interface="in" units="micromolar" cmeta:id="variable0027"/>
      <variable name="V_5P" public_interface="in" units="micromolar" cmeta:id="variable0028"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0029"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>IP3</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>V_PLC</ci>
                     <ci>V_3K</ci>
                  </apply>
                  <ci>V_5P</ci>
               </apply>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component name="V_PLC" cmeta:id="component0006">
      <variable cmeta:id="V_PLC_V_PLC" name="V_PLC" public_interface="out" units="micromolar"/>
      <variable name="V_plc" public_interface="in" units="micromolar_per_second" cmeta:id="variable0030"/>
      <variable name="gamma" public_interface="in" units="dimensionless" cmeta:id="variable0031"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0032"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V_PLC</ci>
            <apply>
               <times/>
               <ci>gamma</ci>
               <ci>V_plc</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component name="V_3K" cmeta:id="component0007">
      <variable cmeta:id="V_3K_V_3K" name="V_3K" public_interface="out" units="micromolar"/>
      <variable name="IP3" public_interface="in" units="micromolar" cmeta:id="variable0033"/>
      <variable name="V_k" public_interface="in" units="micromolar_per_second" cmeta:id="variable0034"/>
      <variable name="K_k" public_interface="in" units="micromolar" cmeta:id="variable0035"/>
      <variable name="C_cyto" public_interface="in" units="micromolar" cmeta:id="variable0036"/>
      <variable name="n_d" public_interface="in" units="dimensionless" cmeta:id="variable0037"/>
      <variable name="K_d" public_interface="in" units="micromolar" cmeta:id="variable0038"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0039"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V_3K</ci>
            <apply>
               <times/>
               <ci>V_k</ci>
               <apply>
                  <divide/>
                  <ci>IP3</ci>
                  <apply>
                     <plus/>
                     <ci>K_k</ci>
                     <ci>IP3</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <apply>
                     <power/>
                     <ci>C_cyto</ci>
                     <ci>n_d</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <power/>
                        <ci>K_d</ci>
                        <ci>n_d</ci>
                     </apply>
                     <apply>
                        <power/>
                        <ci>C_cyto</ci>
                        <ci>n_d</ci>
                     </apply>
                  </apply>
               </apply>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component name="V_5P" cmeta:id="component0008">
      <variable cmeta:id="V_5P_V_5P" name="V_5P" public_interface="out" units="micromolar"/>
      <variable name="IP3" public_interface="in" units="micromolar" cmeta:id="variable0040"/>
      <variable name="IP4" public_interface="in" units="micromolar" cmeta:id="variable0041"/>
      <variable name="V_p1" public_interface="in" units="micromolar_per_second" cmeta:id="variable0042"/>
      <variable name="K_p1" public_interface="in" units="micromolar" cmeta:id="variable0043"/>
      <variable name="K_p2" public_interface="in" units="micromolar" cmeta:id="variable0044"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0045"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V_5P</ci>
            <apply>
               <times/>
               <ci>V_p1</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
               <apply>
                  <divide/>
                  <ci>IP3</ci>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <ci>K_p1</ci>
                        <apply>
                           <plus/>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                           <apply>
                              <divide/>
                              <ci>IP4</ci>
                              <ci>K_p2</ci>
                           </apply>
                        </apply>
                     </apply>
                     <ci>IP3</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="IP4" cmeta:id="component0009">
      <variable cmeta:id="IP4_IP4" initial_value="0.1" name="IP4" public_interface="out" units="micromolar"/>
      <variable name="V_3K" public_interface="in" units="micromolar" cmeta:id="variable0046"/>
      <variable name="V_15P" public_interface="in" units="micromolar" cmeta:id="variable0047"/>
      <variable name="k" public_interface="in" units="per_second" cmeta:id="variable0048"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0049"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>IP4</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>V_3K</ci>
                     <ci>V_15P</ci>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_second">1</cn>
               </apply>
               <apply>
                  <times/>
                  <ci>k</ci>
                  <ci>IP4</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="V_15P" cmeta:id="component0010">
      <variable cmeta:id="V_15P_V_15P" name="V_15P" public_interface="out" units="micromolar"/>
      <variable name="IP3" public_interface="in" units="micromolar" cmeta:id="variable0050"/>
      <variable name="IP4" public_interface="in" units="micromolar" cmeta:id="variable0051"/>
      <variable name="V_p2" public_interface="in" units="micromolar_per_second" cmeta:id="variable0052"/>
      <variable name="K_p1" public_interface="in" units="micromolar" cmeta:id="variable0053"/>
      <variable name="K_p2" public_interface="in" units="micromolar" cmeta:id="variable0054"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0055"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V_15P</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>V_p2</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="second">1</cn>
                  <ci>IP4</ci>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>K_p2</ci>
                     <apply>
                        <plus/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        <apply>
                           <divide/>
                           <ci>IP3</ci>
                           <ci>K_p1</ci>
                        </apply>
                     </apply>
                  </apply>
                  <ci>IP4</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="model_parameters" cmeta:id="component0011">
      <variable initial_value="1.3" name="V_plc" public_interface="out" units="micromolar_per_second" cmeta:id="variable0056"/>
      <variable initial_value="0.5" name="V_k" public_interface="out" units="micromolar_per_second" cmeta:id="variable0057"/>
      <variable initial_value="1" name="K_k" public_interface="out" units="micromolar" cmeta:id="variable0058"/>
      <variable initial_value="0.3" name="K_d" public_interface="out" units="micromolar" cmeta:id="variable0059"/>
      <variable initial_value="2" name="n_d" public_interface="out" units="dimensionless" cmeta:id="variable0060"/>
      <variable initial_value="5" name="V_p1" public_interface="out" units="micromolar_per_second" cmeta:id="variable0061"/>
      <variable initial_value="10" name="K_p1" public_interface="out" units="micromolar" cmeta:id="variable0062"/>
      <variable initial_value="0.2" name="V_p2" public_interface="out" units="micromolar_per_second" cmeta:id="variable0063"/>
      <variable initial_value="2" name="K_p2" public_interface="out" units="micromolar" cmeta:id="variable0064"/>
      <variable initial_value="0.01" name="k" public_interface="out" units="per_second" cmeta:id="variable0065"/>
      <variable initial_value="0.2" name="gamma" public_interface="out" units="dimensionless" cmeta:id="variable0066"/>
      <variable initial_value="0.1" name="alpha" public_interface="out" units="dimensionless" cmeta:id="variable0067"/>
      <variable initial_value="80" name="Ca_tot" public_interface="out" units="micromolar" cmeta:id="variable0068"/>
      <variable initial_value="4" name="V_MP" public_interface="out" units="micromolar_per_second" cmeta:id="variable0069"/>
      <variable initial_value="0.35" name="K_p" public_interface="out" units="micromolar" cmeta:id="variable0070"/>
      <variable initial_value="2" name="n_p" public_interface="out" units="dimensionless" cmeta:id="variable0071"/>
      <variable initial_value="0.56" name="K_act" public_interface="out" units="micromolar" cmeta:id="variable0072"/>
      <variable initial_value="0.15" name="K_inh" public_interface="out" units="micromolar" cmeta:id="variable0073"/>
      <variable initial_value="3" name="n_a" public_interface="out" units="dimensionless" cmeta:id="variable0074"/>
      <variable initial_value="4" name="n_i" public_interface="out" units="dimensionless" cmeta:id="variable0075"/>
      <variable initial_value="0.5" name="K_minus" public_interface="out" units="per_second" cmeta:id="variable0076"/>
      <variable name="K_plus" public_interface="out" units="per_micromolar_per_second" cmeta:id="variable0077"/>
      <variable initial_value="7e-4" name="b" public_interface="out" units="per_second" cmeta:id="variable0078"/>
      <variable initial_value="2.57" name="K_1" public_interface="out" units="per_second" cmeta:id="variable0079"/>
      <variable initial_value="1" name="K_IP" public_interface="out" units="micromolar" cmeta:id="variable0080"/>
      <variable name="time" public_interface="in" units="second" cmeta:id="variable0081"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>K_plus</ci>
            <apply>
               <divide/>
               <ci>K_minus</ci>
               <apply>
                  <power/>
                  <ci>K_inh</ci>
                  <ci>n_i</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment" component_2="model_parameters"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="R_des"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="C_cyto"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="I_ra"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="I_rable"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="IP3"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="V_PLC"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="V_3K"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="V_5P"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="IP4"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="V_15P"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="R_des" component_2="model_parameters"/>
      <map_variables variable_1="K_plus" variable_2="K_plus"/>
      <map_variables variable_1="n_i" variable_2="n_i"/>
      <map_variables variable_1="K_act" variable_2="K_act"/>
      <map_variables variable_1="n_a" variable_2="n_a"/>
      <map_variables variable_1="K_minus" variable_2="K_minus"/>
   </connection>
   <connection>
      <map_components component_1="C_cyto" component_2="model_parameters"/>
      <map_variables variable_1="K_1" variable_2="K_1"/>
      <map_variables variable_1="b" variable_2="b"/>
      <map_variables variable_1="Ca_tot" variable_2="Ca_tot"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="V_MP" variable_2="V_MP"/>
      <map_variables variable_1="n_p" variable_2="n_p"/>
      <map_variables variable_1="K_p" variable_2="K_p"/>
      <map_variables variable_1="n_i" variable_2="n_i"/>
   </connection>
   <connection>
      <map_components component_1="I_ra" component_2="model_parameters"/>
      <map_variables variable_1="n_a" variable_2="n_a"/>
      <map_variables variable_1="K_act" variable_2="K_act"/>
   </connection>
   <connection>
      <map_components component_1="I_rable" component_2="model_parameters"/>
      <map_variables variable_1="K_IP" variable_2="K_IP"/>
   </connection>
   <connection>
      <map_components component_1="V_PLC" component_2="model_parameters"/>
      <map_variables variable_1="gamma" variable_2="gamma"/>
      <map_variables variable_1="V_plc" variable_2="V_plc"/>
   </connection>
   <connection>
      <map_components component_1="V_3K" component_2="model_parameters"/>
      <map_variables variable_1="K_d" variable_2="K_d"/>
      <map_variables variable_1="K_k" variable_2="K_k"/>
      <map_variables variable_1="n_d" variable_2="n_d"/>
      <map_variables variable_1="V_k" variable_2="V_k"/>
   </connection>
   <connection>
      <map_components component_1="V_5P" component_2="model_parameters"/>
      <map_variables variable_1="V_p1" variable_2="V_p1"/>
      <map_variables variable_1="K_p1" variable_2="K_p1"/>
      <map_variables variable_1="K_p2" variable_2="K_p2"/>
   </connection>
   <connection>
      <map_components component_1="IP4" component_2="model_parameters"/>
      <map_variables variable_1="k" variable_2="k"/>
   </connection>
   <connection>
      <map_components component_1="V_15P" component_2="model_parameters"/>
      <map_variables variable_1="V_p2" variable_2="V_p2"/>
      <map_variables variable_1="K_p2" variable_2="K_p2"/>
      <map_variables variable_1="K_p1" variable_2="K_p1"/>
   </connection>
   <connection>
      <map_components component_1="I_rable" component_2="R_des"/>
      <map_variables variable_1="R_des" variable_2="R_des"/>
   </connection>
   <connection>
      <map_components component_1="C_cyto" component_2="R_des"/>
      <map_variables variable_1="C_cyto" variable_2="C_cyto"/>
   </connection>
   <connection>
      <map_components component_1="C_cyto" component_2="I_ra"/>
      <map_variables variable_1="C_cyto" variable_2="C_cyto"/>
      <map_variables variable_1="I_ra" variable_2="I_ra"/>
   </connection>
   <connection>
      <map_components component_1="C_cyto" component_2="V_3K"/>
      <map_variables variable_1="C_cyto" variable_2="C_cyto"/>
   </connection>
   <connection>
      <map_components component_1="I_ra" component_2="I_rable"/>
      <map_variables variable_1="I_rable" variable_2="I_rable"/>
   </connection>
   <connection>
      <map_components component_1="IP3" component_2="I_rable"/>
      <map_variables variable_1="IP3" variable_2="IP3"/>
   </connection>
   <connection>
      <map_components component_1="IP3" component_2="V_PLC"/>
      <map_variables variable_1="V_PLC" variable_2="V_PLC"/>
   </connection>
   <connection>
      <map_components component_1="IP3" component_2="V_3K"/>
      <map_variables variable_1="IP3" variable_2="IP3"/>
      <map_variables variable_1="V_3K" variable_2="V_3K"/>
   </connection>
   <connection>
      <map_components component_1="IP3" component_2="V_5P"/>
      <map_variables variable_1="IP3" variable_2="IP3"/>
      <map_variables variable_1="V_5P" variable_2="V_5P"/>
   </connection>
   <connection>
      <map_components component_1="IP3" component_2="V_15P"/>
      <map_variables variable_1="IP3" variable_2="IP3"/>
   </connection>
   <connection>
      <map_components component_1="IP4" component_2="V_5P"/>
      <map_variables variable_1="IP4" variable_2="IP4"/>
   </connection>
   <connection>
      <map_components component_1="IP4" component_2="V_15P"/>
      <map_variables variable_1="IP4" variable_2="IP4"/>
      <map_variables variable_1="V_15P" variable_2="V_15P"/>
   </connection>
   <connection>
      <map_components component_1="IP4" component_2="V_3K"/>
      <map_variables variable_1="V_3K" variable_2="V_3K"/>
   </connection>
<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><rdf:Description rdf:nodeID="n1"><boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n2"/></boundIntervals></rdf:Description><rdf:Description rdf:nodeID="n3"><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Nielsen</Family><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Hanne</Given></rdf:Description><rdf:Description rdf:nodeID="n4"><rdf:value><rdf:Description rdf:nodeID="n5"/></rdf:value><subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type></rdf:Description><rdf:Description rdf:nodeID="n6"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n7"/></Person></rdf:Description><rdf:Description rdf:nodeID="n8"><Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en"> 9448939 </Pubmed_id><JournalArticle xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n9"/></JournalArticle></rdf:Description><rdf:Description rdf:nodeID="n2"><rdf:rest><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/></rdf:rest><rdf:first><rdf:Description rdf:nodeID="n10"/></rdf:first></rdf:Description><rdf:Description rdf:nodeID="n11"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2011-09-26</W3CDTF></rdf:Description><rdf:Description rdf:nodeID="n12"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n13"/></Person></rdf:Description><rdf:Description rdf:nodeID="n14"><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Dupont</Family><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">G</Given></rdf:Description><rdf:Description rdf:about="#dupont_erneux_1997"><simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n1"/></simulation></rdf:Description><rdf:Description rdf:nodeID="n13"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n14"/></N></rdf:Description><rdf:Description rdf:nodeID="n15"><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Marhl</Family><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">M</Given></rdf:Description><rdf:Description rdf:nodeID="n16"><subject xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:nodeID="n4"/></subject></rdf:Description><rdf:Description rdf:nodeID="n17"><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Cell Calcium</title></rdf:Description><rdf:Description rdf:about=""><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:nodeID="n18"/></creator><created xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:nodeID="n11"/></created></rdf:Description><rdf:Description rdf:nodeID="n19"><Person xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n20"/></Person></rdf:Description><rdf:Description rdf:nodeID="n9"><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:nodeID="n21"/></creator><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
          Simulations of the effects of inositol 1,4,5-trisphosphate 3-kinase and 5-phosphatase activities on Ca2+ oscillations
          </title><issued xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:nodeID="n22"/></issued><Journal xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n17"/></Journal><volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">22(5)</volume><first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">321</first_page><last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">331</last_page></rdf:Description><rdf:Description rdf:nodeID="n23"><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Erneux</Family><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">C</Given><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Z</Other></rdf:Description><rdf:Description rdf:nodeID="n22"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2011-10-10</W3CDTF></rdf:Description><rdf:Description rdf:nodeID="n24"><rdf:type><rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/></rdf:type><rdf:value xml:lang="en">hnie010@aucklanduni.ac.nz</rdf:value></rdf:Description><rdf:Description rdf:nodeID="n18"><EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n24"/></EMAIL><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n3"/></N><ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n25"/></ORG></rdf:Description><rdf:Description rdf:nodeID="n7"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n23"/></N></rdf:Description><rdf:Description rdf:nodeID="n5"><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/></rdf:type><rdf:_2 xml:lang="en">liver</rdf:_2><rdf:_1 xml:lang="en">hepatology</rdf:_1><rdf:_3 xml:lang="en">hepatocyte</rdf:_3></rdf:Description><rdf:Description rdf:about="#grubelnik_2001a"><cmeta:species xml:lang="en">Human</cmeta:species><cmeta:bio_entity xml:lang="en">Liver</cmeta:bio_entity><cmeta:bio_entity xml:lang="en">hepatocyte</cmeta:bio_entity><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n16"/></reference><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:nodeID="n8"/></reference></rdf:Description><rdf:Description rdf:nodeID="n10"><endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">20</endingValue></rdf:Description><rdf:Description rdf:nodeID="n25"><Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname><Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Auckland Bioengineering Institute</Orgunit></rdf:Description><rdf:Description rdf:nodeID="n20"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:nodeID="n15"/></N></rdf:Description><rdf:Description rdf:nodeID="n21"><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/></rdf:type><rdf:_2><rdf:Description rdf:nodeID="n6"/></rdf:_2><rdf:_1><rdf:Description rdf:nodeID="n12"/></rdf:_1><rdf:_3><rdf:Description rdf:nodeID="n19"/></rdf:_3></rdf:Description></rdf:RDF></model>
