// creator: Family Terkildsen; Given Jonna; j.terkildsen@auckland.ac.nz; Orgname Auckland Bioengineering Institute
// created: W3CDTF 2009-08-31
// title: The Parent et al 1992 quantitative model of the Na/glucose cotransporter.
// comment: This is the CellML description of the Parent et al 1992 quantitative model of the Na/Glucose cotransporter.; FN Jonna Terkildsen
// reference: subject_type keyword; Na/glucose cotransport; ion transport
// reference: Pubmed_id 1294062; Family Parent; Given L; Family Supplisson; Given S; Family Loo; Given D; Other D; Other F; Family Wright; Given E; Other M; title Electrogenic Properties of the Cloned Na+/Glucose Cotransporter: II. A Transport Model under Nonrapid Equilibrium Conditions; title Journal of Membrane Biology; volume 125; first_page 63; last_page 79
def model parent_1992 as
  // Electrogenic Properties of the Cloned Na+/Glucose Cotransporter: II. A Transport Model under Nonrapid Equilibrium Conditions
  //
  // Jonna Terkildsen
  //
  // Auckland Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model has been curated, the units are consistent and the model runs in COR and PCEnv to replicate the published results.
  //
  // Model Structure
  //
  // Abstract: The results of the accompanying electrophysiological study of the cloned Na/glucose cotransporter from small intestine (Parent, L., Supplisson, S., Loo, D.D.F., Wright, E.M. (1992) J. Membrane Biol. 125:49-62) were evaluated in terms of a kinetic model. The steady-state and presteady-state cotransporter properties are described by a 6-state ordered kinetic model ("mirror" symmetry) with a Na:aMDG stoichiometry of 2. Carrier translocation in the membrane as well as Na and sugar binding and dissociation are treated as a function of their individual rate constants. Empty carrier translocation and Na binding/dissociation are the only steps considered to be voltage dependent. Currents were associated with the translocation of the negatively charged carrier in the membrane. Negative membrane potential facilitates sugar transport. One numerical solution was found for the 14 rate constants that account quantitatively for our experiment observations: i.e., (i) sigmoidal shape of the sugar-specific current-voltage curves (absence of outward currents and inward current saturation at high negative potentials), (ii) Na and voltage dependence of K_0.5_sugar and i_max_sugar , (iii) sugar and voltage dependence of K_0.5_Na and i_max_Na, (iv) presteady-state currents and their dependence on external Na, aMDG and membrane potential, and (v) and carrier Na leak current. We conclude that the main voltage effect is on carrier translocation. Na ions that migrate from the extracellular medium to their binding sites sense 25 to 35% of the transmembrane voltage, whereas charges associated with the carrier translocation experiences 60 to 75% of the membrane electrical field. Internal Na ion binding is not voltage dependent. In our nonrapid equilibrium model, the rate-limiting step for sugar transport is a function of the membrane potential, [Na]o and [aMDG]o. At 0 mV and at saturating [Na]o and [aMDG]o, the rate-limiting step for sugar transport is the empty carrier translocation (5 sec-1). As the membrane potential is made more negative, the empty carrier translocation gets faster and the internal Na dissociation becomes increasingly rate limiting. However, as [Na]o is decreased to less than 10 mM, the ratelimiting step is the external Na ions binding in the 0 to -150 mV potential range. At 0 mV, the external Na dissociation constant KNa' is 80 mM and decreases to 24 mM at -150 mV. The external sugar dissociation constant KNaS' is estimated to be 200 microM and voltage independent. Finally, the internal leak pathway (CNa2 translocation) is insignificant. While we cannot rule out a more complex kinetic model, the electrical properties of the cloned Na/glucose cotransporter are found to be adequately described by this 6-state kinetic model.
  //
  // The original paper reference is cited below:
  //
  // Electrogenic Properties of the Cloned Na+/Glucose Cotransporter: II. A Transport Model under Nonrapid Equilibrium Conditions, L. Parent, S. Supplisson, D.D.F. Loo and E.M. Wright, 1992, Journal of Membrane Biology, 125, 63-79. PubMed ID: 1294062 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=1294062&query_hl=1&itool=pubmed_docsum)
  //
  // model diagram
  //
  // Schematic diagram of the Parent et al 1992 SGLT1 model. C' represents the external-facing carrier. C'' represents the internal-facing carrier.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit per_second5 as
    unit second {expo: -5};
  enddef;
  def unit volt_per_second as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit umol as
    unit mole {pref: micro};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit um2 as
    unit metre {pref: micro, expo: 2};
  enddef;
  def unit umol_per_second as
    unit umol;
    unit second {expo: -1};
  enddef;
  def unit mol_per_um2 as
    unit mole;
    unit um2 {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit J_per_K_per_mol as
    unit mole {expo: -1};
    unit joule;
    unit kelvin {expo: -1};
  enddef;
  def unit pA_per_cm2 as
    unit ampere {pref: pico};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit uA_per_um2 as
    unit uA;
    unit um2 {expo: -1};
  enddef;
  def unit uA_per_A as
    unit uA;
    unit ampere {expo: -1};
  enddef;
  def unit umol_per_mol as
    unit umol;
    unit mole {expo: -1};
  enddef;
  def unit C_per_mol as
    unit mole {expo: -1};
    unit coulomb;
  enddef;
  def unit per_M_per_second as
    unit M {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_M2_per_second as
    unit M {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit M2 as
    unit M {expo: 2};
  enddef;
  def unit M3 as
    unit M {expo: 3};
  enddef;
  def unit M3_per_second as
    unit M {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit per_M3_per_second5 as
    unit M {expo: -3};
    unit second {expo: -5};
  enddef;
  def unit M_per_second as
    unit M;
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp parameters as
    var k0_12: per_M2_per_second {init: 80000, pub: out};
    var k0_21: per_second {init: 500, pub: out};
    var k0_23: per_M_per_second {init: 1e5, pub: out};
    var k0_32: per_second {init: 20, pub: out};
    var k0_34: per_second {init: 50, pub: out};
    var k0_43: per_second {init: 50, pub: out};
    var k0_45: per_second {init: 800, pub: out};
    var k0_54: per_M_per_second {init: 1.83e7, pub: out};
    var k0_25: per_second {init: 0.3, pub: out};
    var k0_52: per_second {init: 1.37, pub: out};
    var k0_56: per_second {init: 10, pub: out};
    var k0_65: per_M2_per_second {init: 50, pub: out};
    var k0_61: per_second {init: 5, pub: out};
    var k0_16: per_second {init: 35, pub: out};
    var delta: dimensionless {init: 0.7, pub: out};
    var alpha_p: dimensionless {pub: out};
    var alpha_pp: dimensionless {init: 0, pub: out};
    var N_C: dimensionless {init: 6e10};
    var N_Avo: per_mol {init: 6.022e23};
    var area: um2 {init: 1e6};
    var C_T: umol {pub: out};
    var n: dimensionless {init: 2, pub: out};
    var z_c: dimensionless {init: -2, pub: out};
    var z_Na: dimensionless {init: 1, pub: out};
    var F: C_per_mol {init: 96485.34, pub: out};
    var R: J_per_K_per_mol {init: 8.314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var V: volt {pub: in};
    var mu: dimensionless {pub: out};
    alpha_p = 1{dimensionless}-delta-alpha_pp;
    C_T = 1e6{umol_per_mol}*N_C/N_Avo;
    mu = F*V/(R*T);
  enddef;

  def comp ion_concentrations as
    var V: volt {init: -55.4e-3, pub: out};
    var Na_i: M {init: 19.6e-3, pub: out};
    var Na_o: M {init: 140e-3, pub: out};
    var glucose_i: M {init: 15.1e-3, pub: out};
    var glucose_o: M {init: 5e-3, pub: out};
    var time: second {pub: in};
    ode(V, time) = 0e-3{volt_per_second};
  enddef;

  def comp rate_constants as
    var Na_i: M {pub: in};
    var Na_o: M {pub: in};
    var glucose_i: M {pub: in};
    var glucose_o: M {pub: in};
    var k_12: per_second {pub: out};
    var k_21: per_second {pub: out};
    var k_23: per_second {pub: out};
    var k_32: per_second {pub: out};
    var k_34: per_second {pub: out};
    var k_43: per_second {pub: out};
    var k_45: per_second {pub: out};
    var k_54: per_second {pub: out};
    var k_25: per_second {pub: out};
    var k_52: per_second {pub: out};
    var k_56: per_second {pub: out};
    var k_65: per_second {pub: out};
    var k_61: per_second {pub: out};
    var k_16: per_second {pub: out};
    var k0_12: per_M2_per_second {pub: in};
    var ks_12: per_M2_per_second {pub: out};
    var k0_21: per_second {pub: in};
    var k0_23: per_M_per_second {pub: in};
    var k0_32: per_second {pub: in};
    var k0_34: per_second {pub: in};
    var k0_43: per_second {pub: in};
    var k0_45: per_second {pub: in};
    var k0_54_temp: per_M_per_second {pub: out};
    var k0_54: per_M_per_second {pub: in};
    var k0_25: per_second {pub: in};
    var k_52_temp: per_second {pub: out};
    var k0_52: per_second {pub: in};
    var k0_56: per_second {pub: in};
    var k0_65: per_M2_per_second {pub: in};
    var k0_61: per_second {pub: in};
    var k0_16: per_second {pub: in};
    var delta: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var z_c: dimensionless {pub: in};
    var z_Na: dimensionless {pub: in};
    var alpha_p: dimensionless {pub: in};
    var alpha_pp: dimensionless {pub: in};
    var C_T: umol {pub: in};
    var mu: dimensionless {pub: in};
    ks_12 = k0_12*exp(-n*alpha_p*mu/2{dimensionless});
    k_12 = ks_12*pow(Na_o, n);
    k_21 = k0_21*exp(n*z_Na*alpha_p*mu/2{dimensionless});
    k_23 = k0_23*glucose_o;
    k_32 = k0_32;
    k_34 = k0_34*exp(-(z_c+n)*delta*mu/2{dimensionless});
    k_43 = k0_43*exp((z_c+n)*delta*mu/2{dimensionless});
    k_45 = k0_45;
    k_54 = k0_54_temp*glucose_i;
    k_25 = k0_25*exp(-(z_c+n)*delta*mu/2{dimensionless});
    k_52_temp = k0_52*exp((z_c+n)*delta*mu/2{dimensionless});
    k_56 = k0_56*exp(-n*z_Na*alpha_pp*mu/2{dimensionless});
    k_65 = k0_65*pow(Na_i, n)*exp(n*z_Na*alpha_pp*mu/2{dimensionless});
    k_61 = k0_61*exp(z_c*delta*mu/2{dimensionless});
    k_16 = k0_16*exp(-z_c*delta*mu/2{dimensionless});
    k_52 = k0_12*k_25*k0_56*k0_61/(k0_21*k0_16*k0_65);
    k0_54_temp = k0_23*k_34*k_45*k_52/(k_43*k_32*k_25);
  enddef;

  def comp kinetic_equations as
    var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    var k_23: per_second {pub: in};
    var k_32: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_45: per_second {pub: in};
    var k_54: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var C_1: umol {init: 1.505e-8, pub: out};
    var C_2: umol {init: 7.3976e-8, pub: out};
    var C_3: umol {init: 2.4603e-10, pub: out};
    var C_4: umol {init: 3.4444e-10, pub: out};
    var C_5: umol {init: 1.5338e-9, pub: out};
    var C_6: umol {pub: out};
    var C_6_temp: umol {init: 8.484e-9, pub: out};
    var C_T: umol {pub: in};
    var time: second {pub: in};
    ode(C_1, time) = k_21*C_2+k_61*C_6-(k_12+k_16)*C_1;
    ode(C_2, time) = k_12*C_1+k_32*C_3+k_52*C_5-(k_21+k_23+k_25)*C_2;
    ode(C_3, time) = k_23*C_2+k_43*C_4-(k_32+k_34)*C_3;
    ode(C_4, time) = k_34*C_3+k_54*C_5-(k_45+k_43)*C_4;
    ode(C_5, time) = k_45*C_4+k_65*C_6+k_25*C_2-(k_54+k_52+k_56)*C_5;
    ode(C_6_temp, time) = k_16*C_1+k_56*C_5-(k_61+k_65)*C_6_temp;
    C_6 = C_T-(C_1+C_2+C_3+C_4+C_5);
  enddef;

  def comp king_altman_states as
    var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    var k_23: per_second {pub: in};
    var k_32: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_45: per_second {pub: in};
    var k_54: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var C1_sum: per_second5;
    var C2_sum: per_second5;
    var C3_sum: per_second5;
    var C4_sum: per_second5;
    var C5_sum: per_second5;
    var C6_sum: per_second5;
    var C_sum: per_second5;
    var C_T: umol {pub: in};
    var C1: umol {pub: out};
    var C2: umol {pub: out};
    var C3: umol {pub: out};
    var C4: umol {pub: out};
    var C5: umol {pub: out};
    var C6: umol {pub: out};
    C1_sum = k_21*k_32*k_43*k_54*k_65+k_21*k_34*k_45*k_52*k_65+k_21*k_32*k_45*k_52*k_65+k_21*k_32*k_43*k_52*k_65+k_25*k_34*k_45*k_56*k_61+k_23*k_34*k_45*k_56*k_61+k_21*k_34*k_45*k_56*k_61+k_25*k_32*k_45*k_56*k_61+k_21*k_32*k_45*k_56*k_61+k_25*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_54*k_61+k_21*k_34*k_45*k_52*k_61+k_21*k_32*k_45*k_52*k_61+k_21*k_32*k_43*k_52*k_61;
    C2_sum = k_16*k_32*k_43*k_54*k_65+k_12*k_32*k_43*k_54*k_65+k_16*k_34*k_45*k_52*k_65+k_12*k_34*k_45*k_52*k_65+k_16*k_32*k_45*k_52*k_65+k_12*k_32*k_45*k_52*k_65+k_16*k_32*k_43*k_52*k_65+k_12*k_32*k_43*k_52*k_65+k_12*k_34*k_45*k_56*k_61+k_12*k_32*k_45*k_56*k_61+k_12*k_32*k_43*k_56*k_61+k_12*k_32*k_43*k_54*k_61+k_12*k_34*k_45*k_52*k_61+k_12*k_32*k_45*k_52*k_61+k_12*k_32*k_43*k_52*k_61;
    C3_sum = k_16*k_25*k_43*k_54*k_65+k_12*k_25*k_43*k_54*k_65+k_16*k_23*k_43*k_54*k_65+k_12*k_23*k_43*k_54*k_65+k_16*k_21*k_43*k_54*k_65+k_16*k_23*k_45*k_52*k_65+k_12*k_23*k_45*k_52*k_65+k_16*k_23*k_43*k_52*k_65+k_12*k_23*k_43*k_52*k_65+k_12*k_23*k_45*k_56*k_61+k_12*k_23*k_43*k_56*k_61+k_12*k_25*k_43*k_54*k_61+k_12*k_23*k_43*k_54*k_61+k_12*k_23*k_45*k_52*k_61+k_12*k_23*k_43*k_52*k_61;
    C4_sum = k_16*k_25*k_34*k_54*k_65+k_12*k_25*k_34*k_54*k_65+k_16*k_23*k_34*k_54*k_65+k_12*k_23*k_34*k_54*k_65+k_16*k_21*k_34*k_54*k_65+k_16*k_25*k_32*k_54*k_65+k_12*k_25*k_32*k_54*k_65+k_16*k_21*k_32*k_54*k_65+k_16*k_23*k_34*k_52*k_65+k_12*k_23*k_34*k_52*k_65+k_12*k_23*k_34*k_56*k_61+k_12*k_25*k_34*k_54*k_61+k_12*k_23*k_34*k_54*k_61+k_12*k_25*k_32*k_54*k_61+k_12*k_23*k_34*k_52*k_61;
    C5_sum = k_16*k_25*k_34*k_45*k_65+k_12*k_25*k_34*k_45*k_65+k_16*k_23*k_34*k_45*k_65+k_12*k_23*k_34*k_45*k_65+k_16*k_21*k_34*k_45*k_65+k_16*k_25*k_32*k_45*k_65+k_12*k_25*k_32*k_45*k_65+k_16*k_21*k_32*k_45*k_65+k_16*k_25*k_32*k_43*k_65+k_12*k_25*k_32*k_43*k_65+k_16*k_21*k_32*k_43*k_65+k_12*k_25*k_34*k_45*k_61+k_12*k_23*k_34*k_45*k_61+k_12*k_25*k_32*k_45*k_61+k_12*k_25*k_32*k_43*k_61;
    C6_sum = k_16*k_25*k_34*k_45*k_56+k_12*k_25*k_34*k_45*k_56+k_16*k_23*k_34*k_45*k_56+k_12*k_23*k_34*k_45*k_56+k_16*k_21*k_34*k_45*k_56+k_16*k_25*k_32*k_45*k_56+k_12*k_25*k_32*k_45*k_56+k_16*k_21*k_32*k_45*k_56+k_16*k_25*k_32*k_43*k_56+k_12*k_25*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_54+k_16*k_21*k_34*k_45*k_52+k_16*k_21*k_32*k_45*k_52+k_16*k_21*k_32*k_43*k_52;
    C_sum = C1_sum+C2_sum+C3_sum+C4_sum+C5_sum+C6_sum;
    C1 = C_T*C1_sum/C_sum;
    C2 = C_T*C2_sum/C_sum;
    C3 = C_T*C3_sum/C_sum;
    C4 = C_T*C4_sum/C_sum;
    C5 = C_T*C5_sum/C_sum;
    C6 = C_T*C6_sum/C_sum;
  enddef;

  def comp NBC_current as
    var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var C_1: umol {pub: in};
    var C_2: umol {pub: in};
    var C_3: umol {pub: in};
    var C_4: umol {pub: in};
    var C_5: umol {pub: in};
    var C_6: umol {pub: in};
    var C1: umol {pub: in};
    var C2: umol {pub: in};
    var C3: umol {pub: in};
    var C4: umol {pub: in};
    var C5: umol {pub: in};
    var C6: umol {pub: in};
    var delta: dimensionless {pub: in};
    var alpha_p: dimensionless {pub: in};
    var alpha_pp: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var z_c: dimensionless {pub: in};
    var z_Na: dimensionless {pub: in};
    var F: C_per_mol {pub: in};
    var I_NaGl_pSS: uA {pub: out};
    var I_NaGl_SS: uA {pub: out};
    var J_Na: umol_per_second {pub: out};
    I_NaGl_pSS = -F*(n*z_Na*alpha_p*(k_12*C_1-k_21*C_2)+z_c*delta*(k_16*C_1-k_61*C_6)+n*z_Na*alpha_pp*(k_56*C_5-k_65*C_6));
    I_NaGl_SS = -F*(z_c*(k_16*C1-k_61*C6)+(z_c+z_Na*n)*(k_25*C2-k_52*C5)+(z_c+z_Na*n)*(k_34*C3-k_43*C4));
    J_Na = n*(k_25*C2-k_52*C5+k_34*C3-k_43*C4);
  enddef;

  def comp phenomonological_constants as
    var epsilon: per_second {pub: out};
    var lambda: per_M3_per_second5 {pub: out};
    var chi: M {pub: out};
    var alpha: M3 {pub: out};
    var beta: M2 {pub: out};
    var gamma: M3_per_second {pub: out};
    var phi: M_per_second {pub: out};
    var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    var k_23: per_second {pub: in};
    var k_32: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_45: per_second {pub: in};
    var k_54: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var ks_12: per_M2_per_second {pub: in};
    var k0_23: per_M_per_second {pub: in};
    var C_T: umol {pub: in};
    var F: C_per_mol {pub: in};
    var Na_o: M {pub: in};
    var glucose_o: M {pub: in};
    var Imax_Na: uA {pub: out};
    var Imax_gluc: uA {pub: out};
    var Khalf_Na_sq: M2 {pub: out};
    var Khalf_Na: M {pub: out};
    var Khalf_gluc: M {pub: out};
    lambda = ks_12*k0_23*k_43*k_54*k_65+ks_12*k0_23*k_34*k_54*k_65+ks_12*k0_23*k_45*k_52*k_65+ks_12*k0_23*k_43*k_52*k_65+ks_12*k0_23*k_34*k_52*k_65+ks_12*k0_23*k_34*k_45*k_65+ks_12*k0_23*k_45*k_56*k_61+ks_12*k0_23*k_43*k_56*k_61+ks_12*k0_23*k_34*k_56*k_61+ks_12*k0_23*k_43*k_54*k_61+ks_12*k0_23*k_34*k_54*k_61+ks_12*k0_23*k_45*k_52*k_61+ks_12*k0_23*k_43*k_52*k_61+ks_12*k0_23*k_34*k_52*k_61+ks_12*k0_23*k_34*k_45*k_61+ks_12*k0_23*k_34*k_45*k_56;
    chi = 1{dimensionless}/lambda*(ks_12*k_32*k_43*k_54*k_65+ks_12*k_25*k_43*k_54*k_65+ks_12*k_25*k_34*k_54*k_65+ks_12*k_25*k_32*k_54*k_65+ks_12*k_34*k_45*k_52*k_65+ks_12*k_32*k_45*k_52*k_65+ks_12*k_32*k_43*k_52*k_65+ks_12*k_25*k_34*k_45*k_65+ks_12*k_25*k_32*k_45*k_65+ks_12*k_25*k_32*k_43*k_65+ks_12*k_34*k_45*k_56*k_61+ks_12*k_32*k_45*k_56*k_61+ks_12*k_32*k_43*k_56*k_61+ks_12*k_32*k_43*k_54*k_61+ks_12*k_25*k_43*k_54*k_61+ks_12*k_25*k_34*k_54*k_61+ks_12*k_25*k_32*k_54*k_61+ks_12*k_34*k_45*k_52*k_61+ks_12*k_32*k_45*k_52*k_61+ks_12*k_32*k_43*k_52*k_61+ks_12*k_25*k_34*k_45*k_61+ks_12*k_25*k_32*k_45*k_61+ks_12*k_25*k_32*k_43*k_61+ks_12*k_25*k_34*k_45*k_56+ks_12*k_25*k_32*k_45*k_56+ks_12*k_25*k_32*k_43*k_56);
    beta = 1{dimensionless}/lambda*(k0_23*k_16*k_43*k_54*k_65+k0_23*k_16*k_34*k_54*k_65+k0_23*k_16*k_45*k_52*k_65+k0_23*k_16*k_43*k_52*k_65+k0_23*k_16*k_34*k_52*k_65+k0_23*k_16*k_34*k_45*k_65+k0_23*k_34*k_45*k_56*k_61+k0_23*k_16*k_34*k_45*k_56);
    alpha = 1{dimensionless}/lambda*(k_21*k_32*k_43*k_54*k_65+k_16*k_32*k_43*k_54*k_65+k_16*k_25*k_43*k_54*k_65+k_16*k_21*k_43*k_54*k_65+k_16*k_25*k_34*k_54*k_65+k_16*k_21*k_34*k_54*k_65+k_16*k_25*k_32*k_54*k_65+k_16*k_21*k_32*k_54*k_65+k_21*k_34*k_45*k_52*k_65+k_16*k_34*k_45*k_52*k_65+k_21*k_32*k_45*k_52*k_65+k_16*k_32*k_45*k_52*k_65+k_21*k_32*k_43*k_52*k_65+k_16*k_32*k_43*k_52*k_65+k_16*k_25*k_34*k_45*k_65+k_16*k_21*k_34*k_45*k_65+k_16*k_25*k_32*k_45*k_65+k_16*k_21*k_32*k_45*k_65+k_16*k_25*k_32*k_43*k_65+k_16*k_21*k_32*k_43*k_65+k_25*k_34*k_45*k_56*k_61+k_21*k_34*k_45*k_56*k_61+k_25*k_32*k_45*k_56*k_61+k_21*k_32*k_45*k_56*k_61+k_25*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_54*k_61+k_21*k_34*k_45*k_52*k_61+k_21*k_32*k_45*k_52*k_61+k_21*k_32*k_43*k_52*k_61+k_16*k_25*k_34*k_45*k_56+k_16*k_21*k_34*k_45*k_56+k_16*k_25*k_32*k_45*k_56+k_16*k_21*k_32*k_45*k_56+k_16*k_25*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_54+k_16*k_21*k_34*k_45*k_52+k_16*k_21*k_32*k_45*k_52+k_16*k_21*k_32*k_43*k_52);
    gamma = 1{dimensionless}/lambda*(k_16*k_21*k_32*k_43*k_54*k_65+k_16*k_21*k_34*k_45*k_52*k_65+k_16*k_21*k_32*k_45*k_52*k_65+k_16*k_21*k_32*k_43*k_52*k_65);
    phi = 1{dimensionless}/lambda*(-ks_12*k_25*k_34*k_45*k_56*k_61-ks_12*k_25*k_32*k_45*k_56*k_61-ks_12*k_25*k_32*k_43*k_56*k_61);
    epsilon = 1{dimensionless}/lambda*(-ks_12)*k0_23*k_34*k_45*k_56*k_61;
    Imax_gluc = 2{dimensionless}*F*C_T*epsilon*sqr(Na_o)/(beta+sqr(Na_o));
    Imax_Na = 2{dimensionless}*F*C_T*(phi+epsilon*glucose_o)/(chi+glucose_o);
    Khalf_gluc = (alpha+chi*sqr(Na_o))/(beta+sqr(Na_o));
    Khalf_Na_sq = (alpha+beta*glucose_o)/(chi+glucose_o);
    Khalf_Na = sqrt(Khalf_Na_sq);
  enddef;
  def map between rate_constants and ion_concentrations for
    vars Na_i and Na_i;
    vars Na_o and Na_o;
    vars glucose_i and glucose_i;
    vars glucose_o and glucose_o;
  enddef;
  def map between phenomonological_constants and ion_concentrations for
    vars Na_o and Na_o;
    vars glucose_o and glucose_o;
  enddef;
  def map between phenomonological_constants and parameters for
    vars k0_23 and k0_23;
    vars C_T and C_T;
    vars F and F;
  enddef;
  def map between rate_constants and kinetic_equations for
    vars k_12 and k_12;
    vars k_21 and k_21;
    vars k_23 and k_23;
    vars k_32 and k_32;
    vars k_25 and k_25;
    vars k_52 and k_52;
    vars k_34 and k_34;
    vars k_43 and k_43;
    vars k_45 and k_45;
    vars k_54 and k_54;
    vars k_56 and k_56;
    vars k_65 and k_65;
    vars k_61 and k_61;
    vars k_16 and k_16;
  enddef;
  def map between rate_constants and phenomonological_constants for
    vars ks_12 and ks_12;
    vars k_12 and k_12;
    vars k_21 and k_21;
    vars k_23 and k_23;
    vars k_32 and k_32;
    vars k_25 and k_25;
    vars k_52 and k_52;
    vars k_34 and k_34;
    vars k_43 and k_43;
    vars k_45 and k_45;
    vars k_54 and k_54;
    vars k_56 and k_56;
    vars k_65 and k_65;
    vars k_61 and k_61;
    vars k_16 and k_16;
  enddef;
  def map between rate_constants and king_altman_states for
    vars k_12 and k_12;
    vars k_21 and k_21;
    vars k_23 and k_23;
    vars k_32 and k_32;
    vars k_25 and k_25;
    vars k_52 and k_52;
    vars k_34 and k_34;
    vars k_43 and k_43;
    vars k_45 and k_45;
    vars k_54 and k_54;
    vars k_56 and k_56;
    vars k_65 and k_65;
    vars k_61 and k_61;
    vars k_16 and k_16;
  enddef;
  def map between rate_constants and NBC_current for
    vars k_12 and k_12;
    vars k_21 and k_21;
    vars k_56 and k_56;
    vars k_65 and k_65;
    vars k_34 and k_34;
    vars k_43 and k_43;
    vars k_25 and k_25;
    vars k_52 and k_52;
    vars k_61 and k_61;
    vars k_16 and k_16;
  enddef;
  def map between NBC_current and parameters for
    vars delta and delta;
    vars alpha_p and alpha_p;
    vars alpha_pp and alpha_pp;
    vars n and n;
    vars z_c and z_c;
    vars z_Na and z_Na;
    vars F and F;
  enddef;
  def map between NBC_current and kinetic_equations for
    vars C_1 and C_1;
    vars C_2 and C_2;
    vars C_3 and C_3;
    vars C_4 and C_4;
    vars C_5 and C_5;
    vars C_6 and C_6;
  enddef;
  def map between NBC_current and king_altman_states for
    vars C1 and C1;
    vars C2 and C2;
    vars C3 and C3;
    vars C4 and C4;
    vars C5 and C5;
    vars C6 and C6;
  enddef;
  def map between ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between kinetic_equations and environment for
    vars time and time;
  enddef;
  def map between kinetic_equations and parameters for
    vars C_T and C_T;
  enddef;
  def map between king_altman_states and parameters for
    vars C_T and C_T;
  enddef;
  def map between rate_constants and parameters for
    vars k0_12 and k0_12;
    vars k0_21 and k0_21;
    vars k0_23 and k0_23;
    vars k0_32 and k0_32;
    vars k0_25 and k0_25;
    vars k0_52 and k0_52;
    vars k0_34 and k0_34;
    vars k0_43 and k0_43;
    vars k0_45 and k0_45;
    vars k0_54 and k0_54;
    vars k0_56 and k0_56;
    vars k0_65 and k0_65;
    vars k0_61 and k0_61;
    vars k0_16 and k0_16;
    vars delta and delta;
    vars alpha_p and alpha_p;
    vars alpha_pp and alpha_pp;
    vars C_T and C_T;
    vars n and n;
    vars z_c and z_c;
    vars z_Na and z_Na;
    vars mu and mu;
  enddef;
  def map between ion_concentrations and parameters for
    vars V and V;
  enddef;
  // The following RDF block contains metadata that applies to this document
  // as a whole, as indicated by the empty about attribute on the
  // <rdf:Description> element.
  // The Model Builder Metadata.  The Dublin Core "creator" element is used
  // to indicate the person who translated the model into CellML.
  // The Creation Date metadata. This is the date on which the model
  // was translated into CellML.
  // The Modification History metadata. This lists the changes that have been
  // made to the document, who made the changes, and when they were made.
  // The following metadata refers to the model itself, as indicated by the
  // reference to the ID "parent_1992", which is
  // declared on the <model> element.
  // A human readable name for the model.
  // A comment regarding the model.
  // The creator of the comment.
  // Keyword(s)
enddef;
