<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="TempIPump" name="TempIPump">

<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="Units.cellml">
<units name="UnitP" units_ref="UnitP"/>
<units name="UnitQ" units_ref="UnitQ"/>
<units name="UnitR" units_ref="UnitR"/>
<units name="UnitC" units_ref="UnitC"/>
<units name="UnitRPM" units_ref="UnitRPM"/>
<units name="UnitKp0" units_ref="UnitKp0"/>
<units name="UnitKp1" units_ref="UnitKp1"/>
<units name="UnitKp2" units_ref="UnitKp2"/>
<units name="UnitKp3" units_ref="UnitKp3"/>
<units name="UnitKp4" units_ref="UnitKp4"/>
<units name="UnitKp5" units_ref="UnitKp5"/>
<units name="UnitKp6" units_ref="UnitKp6"/>
</import>

<component name="TempIPump">
<variable name="Qvi" public_interface="out" units="UnitQ"/>
<variable name="Qvo" public_interface="out" units="UnitQ"/>
<variable name="t" public_interface="in" units="second"/>
<variable name="Pvi" public_interface="in" units="UnitP"/>
<variable name="Pvo" public_interface="in" units="UnitP"/>
<variable name="Wn" public_interface="out" units="UnitRPM"/>

<variable name="Ts2" public_interface="in" units="dimensionless"/>
<variable name="T" public_interface="in" units="second"/>
<variable name="Kp0" public_interface="in" units="UnitKp0"/>
<variable name="Kp1" public_interface="in" units="UnitKp1"/>
<variable name="Kp2" public_interface="in" units="UnitKp2"/>
<variable name="Kp3" public_interface="in" units="UnitKp3"/>
<variable name="Kp4" public_interface="in" units="UnitKp4"/>
<variable name="Kp5" public_interface="in" units="UnitKp5"/>
<variable name="Kp6" public_interface="in" units="UnitKp6"/>

<math xmlns="http://www.w3.org/1998/Math/MathML">

<apply><eq/><ci>Wn</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">1</cn><ci>Wi</ci></apply></apply>
<apply><eq/><ci>Qvo</ci><apply><times/><apply><plus/><ci>Kp0</ci><apply><times/><ci>Kp1</ci><ci>Wn</ci></apply><apply><times/><ci>Kp2</ci><ci>dPv</ci></apply><apply><times/><ci>Kp3</ci><ci>Wn</ci><ci>dPv</ci></apply><apply><times/><ci>Kp4</ci><apply><power/><ci>Wn</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn></apply><ci>dPv</ci></apply><apply><times/><ci>Kp5</ci><ci>Wn</ci><apply><power/><ci>dPv</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn></apply></apply><apply><times/><ci>Kp6</ci><apply><power/><ci>Wn</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn></apply><apply><power/><ci>dPv</ci><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">2</cn></apply></apply></apply><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">16.6667</cn></apply></apply>
<apply><eq/><ci>Qvi</ci><apply><times/><cn xmlns:cellml="http://www.cellml.org/cellml/1.1#" cellml:units="dimensionless">-1</cn><ci>Qvo</ci></apply></apply>

<apply><eq/><ci>dPv</ci><apply><minus/><ci>Pvo</ci><ci>Pvi</ci></apply></apply></math>

<variable name="Wi" public_interface="in" units="UnitRPM"/><variable name="dPv" units="UnitP"/></component>

</model>