// This CellML file was generated on 12/02/2009 at 21:11:33 using:
//
// COR (0.9.31.1073)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// publisher: The University of Auckland, Bioengineering Institute
// comment: FN Catherine Lloyd; This CellML model is known to run in both PCEnv and COR. The units have been checked and they are consistent. The CellML model was created using a combination of both the published paper and also the author's Matlab code.
// created: W3CDTF 2008-07-08T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2009-02-13T12:18:02+13:00; This second version of the CellML model has been modified by Steve Niederer. The CellML model was compared with Jeremy Rice's original Matlab code taken from his web page. Changes to the CellML model include: body temperature in the Rice Matlab code is acurate to 3sf ie body temp is 310 not 310.15. Also in the Rice Matlab code derivative 12 the force integral is fixed to be zero. To fix the CellML model Steve introduced: SEon = 1.0; To cellml model and change afterload definition to: if (SEon == 1) afterload = KSE*(SLset-Y(5)); else afterload = 0.0; end; and changed xbmodsp = 4/3 (which is the mouse specific modification for XB cycling rates) to xbmodsp = 1 (to represent the rat model and not the mouse) Steve also reset all of the initial conditions after solving the model a coupl of times for 1000ms.; Given Steve; Family Niederer
// title: Rice et al.'s 2008 model of cooperative activation and crossbridge cycling in cardiac muscle using ordinary differential equations.
// comment: FN Catherine Lloyd; This is the CellML description of Rice et al.'s 2008 model of cooperative activation and crossbridge cycling in cardiac muscle using ordinary differential equations.
// reference: Pubmed_id 18234826; title Approximate model of cooperative activation and crossbridge cycling in cardiac muscle using ordinary differential equations; W3CDTF 2008-00-00 00:00; title Biophysical Journal; Given John; Family Rice; Other Jeremy; Given Fei; Family Wang; Given Donald; Family Bers; Other M; Given Pieter; Family de Tombe; Other P
// reference: subject_type keyword; cardiac; crossbridge; heart; muscle; myofilament; actin; myosin; calcium; troponin; tropomyosin; cooperativity; electrophysiology
def model rice_model_2008 as
  // Approximate model of cooperative activation and crossbridge cycling in cardiac muscle using ordinary differential equations
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This cellML model is known to run in both PCEnv and COR. The units have been checked and they are consistent. This second version of the CellML model has been modified by Steve Niederer. The CellML model was compared with Jeremy Rice's original Matlab code taken from his web page. Changes to the CellML model include: body temperature in the Rice Matlab code is acurate to 3sf ie body temp is 310 not 310.15. Also in the Rice Matlab code derivative 12 the force integral is fixed to be zero. To fix the CellML model Steve introduced:
  //
  // SEon = 1.0; To cellml model and change afterload definition to: if (SEon == 1) afterload = KSE*(SLset-Y(5)); else afterload = 0.0; end;
  //
  // and changed xbmodsp = 4/3 (which is the mouse specific modification for XB cycling rates) to xbmodsp = 1 (to represent the rat model and not the mouse)
  //
  // And finally Steve also reset all of the initial conditions after solving the model a coupl of times for 1000ms.
  //
  // Model Structure
  //
  // Abstract: We develop a point model of the cardiac myofilament (MF) to simulate wide variety of experimental muscle characterizations including Force-Ca relations and twitches under isometric, isosarcometric, isotonic and auxotonic conditions. Complex MF behaviors are difficult to model because spatial interactions cannot be directly implemented as ordinary differential equations (ODEs). We therefore allow phenomenological approximations with careful consideration to the relationships with the underlying biophysical mechanisms. We describe new formulations that avoid mean-field approximations found in most existing MF models. To increase the scope and applicability of the model, we include length- and temperature-dependent effects that play important roles in MF response. We have also included a representation of passive restoring forces to simulate isolated cell shortening protocols. Possessing both computational efficiency and the ability to simulate a wide variety of muscle responses, the MF representation is well-suited for coupling to existing cardiac cell models of electrophysiology and Ca-handling mechanisms. To illustrate this suitability, the MF model is coupled to the Chicago rabbit cardiomyocyte model. The combined model generates realistic appearing action potentials, intracellular Ca transients, and cell shortening signals. The combined model also demonstrates that the feedback effects of force on Ca binding to troponin can modify the cystolic Ca transient.
  //
  // Note that the current CellMl model describes the rat model of myofilamentcontraction. One of the goals of the published work by Rice et al. was to develop a model of the myofilaments which could be coupled to existing models of cardiac electrophysiology and Ca-handling mechanisms. Similarly, it is our intention to be able to couple the CellML model of myofilament contration with cardiac models of electrophysiology and calcium change. To achieve this we will first have to modify the rat myofilament model to convert it to a rabbit myofilament model. This can be achieved by decreasing the transition rates in the crossbridge cycle by a factor of 5 to simulate the changes in myosin isoforms (rat is predominately V1 while rabbit is V3) and species-based changes in rate. We can then couple the model to the Chicago rabbit ventricular myocyte model (http://www.cellml.org/models/shannon_wang_puglisi_weber_bers_2004_version04) by using the cytosolic Ca concentration ([Ca]c) from the Chicago model as the input to the myofilament model. Other minor modifications are also required, as described in the paper below:
  //
  // Approximate model of cooperative activation and crossbridge cycling in cardiac muscle using ordinary differential equations, John Jeremy Rice, Fei Wang, Donald M. Bers and Pieter P. de Tombe, 2008, Biophysical Journal PubMed ID: 18234826 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=18234826&query_hl=1&itool=pubmed_docsum)
  //
  // model diagram
  //
  // Schematic diagram of the model.
  def unit unit_normalised_force as base unit;
  def unit unit_normalised_force_millisecond2_per_micrometre as
    unit unit_normalised_force;
    unit millisecond {expo: 2};
    unit micrometre {expo: -1};
  enddef;
  def unit unit_normalised_force_millisecond as
    unit unit_normalised_force;
    unit millisecond;
  enddef;
  def unit unit_normalised_force_millisecond_per_micrometre as
    unit unit_normalised_force;
    unit millisecond;
    unit micrometre {expo: -1};
  enddef;
  def unit unit_normalised_force_per_micrometre as
    unit unit_normalised_force;
    unit micrometre {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_micrometre as
    unit micrometre {expo: -1};
  enddef;
  def unit micrometre_per_millisecond as
    unit micrometre;
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_micrometre as
    unit millisecond;
    unit micrometre {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millisecond2_per_micrometre as
    unit millisecond {expo: 2};
    unit micrometre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit micromolar_per_millisecond as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit millisecond {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millinewton_per_millimetre2 as
    unit newton {pref: milli};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit millinewton_micrometre_per_millimetre2 as
    unit newton {pref: milli};
    unit metre {pref: micro};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit millinewton_micrometre_per_millimetre2_per_millisecond as
    unit newton {pref: milli};
    unit metre {pref: micro};
    unit metre {pref: milli, expo: -2};
    unit second {pref: milli, expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp sarcomere_geometry as
    var SOVFThick: dimensionless {pub: out};
    var SOVFThin: dimensionless {pub: out};
    var sovr_ze: micrometre;
    var sovr_cle: micrometre;
    var len_sovr: micrometre;
    var SLmax: micrometre {pub: in};
    var SLmin: micrometre {pub: in};
    var len_thin: micrometre {pub: in};
    var len_thick: micrometre {pub: in};
    var len_hbare: micrometre {pub: in};
    var SL: micrometre {pub: in};
    sovr_ze = sel
      case len_thick/2{dimensionless} < SL/2{dimensionless}:
        len_thick/2{dimensionless};
      otherwise:
        SL/2{dimensionless};
    endsel;
    sovr_cle = sel
      case SL/2{dimensionless}-(SL-len_thin) > len_hbare/2{dimensionless}:
        SL/2{dimensionless}-(SL-len_thin);
      otherwise:
        len_hbare/2{dimensionless};
    endsel;
    len_sovr = sovr_ze-sovr_cle;
    SOVFThick = len_sovr*2{dimensionless}/(len_thick-len_hbare);
    SOVFThin = len_sovr/len_thin;
  enddef;

  def comp Ca_binding_to_troponin_to_thin_filament_regulation as
    var TRPNCaL: dimensionless {pub: out, init: 0.0147730085063734};
    var TRPNCaH: dimensionless {pub: out, init: 0.13066096561522};
    var dTRPNCaL: first_order_rate_constant {pub: out};
    var dTRPNCaH: first_order_rate_constant {pub: out};
    var kn_pT: first_order_rate_constant {pub: out};
    var kp_nT: first_order_rate_constant {pub: out};
    var konT: second_order_rate_constant;
    var koffLT: first_order_rate_constant;
    var koffHT: first_order_rate_constant;
    var Qkon: dimensionless {init: 1.5};
    var Qkoff: dimensionless {init: 1.3};
    var Qkn_p: dimensionless {init: 1.6};
    var Qkp_n: dimensionless {init: 1.6};
    var kon: second_order_rate_constant {init: 0.05};
    var koffL: first_order_rate_constant {init: 0.25};
    var koffH: first_order_rate_constant {init: 0.025};
    var perm50: dimensionless {init: 0.5};
    var nperm: dimensionless {init: 15};
    var kn_p: first_order_rate_constant {init: 0.5};
    var kp_n: first_order_rate_constant {init: 0.05};
    var koffmod: dimensionless {init: 1};
    var Tropreg: dimensionless;
    var permtot: dimensionless;
    var inprmt: dimensionless;
    var time: millisecond {pub: in};
    var TmpC: celsius {pub: in};
    var Cai: micromolar {pub: in};
    var SOVFThin: dimensionless {pub: in};
    konT = kon*pow(Qkon, (TmpC-37{celsius})/10{celsius});
    koffLT = koffL*koffmod*pow(Qkoff, (TmpC-37{celsius})/10{celsius});
    koffHT = koffH*koffmod*pow(Qkoff, (TmpC-37{celsius})/10{celsius});
    kn_pT = kn_p*permtot*pow(Qkn_p, (TmpC-37{celsius})/10{celsius});
    kp_nT = kp_n*inprmt*pow(Qkp_n, (TmpC-37{celsius})/10{celsius});
    permtot = sqrt(abs(1{dimensionless}/(1{dimensionless}+pow(perm50/Tropreg, nperm))));
    inprmt = sel
      case 1{dimensionless}/permtot < 100{dimensionless}:
        1{dimensionless}/permtot;
      otherwise:
        100{dimensionless};
    endsel;
    ode(TRPNCaL, time) = dTRPNCaL;
    dTRPNCaL = konT*Cai*(1{dimensionless}-TRPNCaL)-koffLT*TRPNCaL;
    ode(TRPNCaH, time) = dTRPNCaH;
    dTRPNCaH = konT*Cai*(1{dimensionless}-TRPNCaH)-koffHT*TRPNCaH;
    Tropreg = (1{dimensionless}-SOVFThin)*TRPNCaL+SOVFThin*TRPNCaH;
  enddef;

  def comp thin_filament_regulation_and_crossbridge_cycling_rates as
    var fappT: first_order_rate_constant {pub: out};
    var gappT: first_order_rate_constant {pub: out};
    var hfT: first_order_rate_constant {pub: out};
    var hbT: first_order_rate_constant {pub: out};
    var gxbT: first_order_rate_constant {pub: out};
    var fapp: first_order_rate_constant {pub: out, init: 0.5};
    var gapp: first_order_rate_constant {pub: out, init: 0.07};
    var hf: first_order_rate_constant {pub: out, init: 2};
    var hb: first_order_rate_constant {pub: out, init: 0.4};
    var gxb: first_order_rate_constant {pub: out, init: 0.07};
    var gslmod: dimensionless {init: 6};
    var hfmd: dimensionless;
    var hbmd: dimensionless;
    var hfmdc: dimensionless {init: 5};
    var hbmdc: dimensionless {init: 0};
    var sigmap: dimensionless {init: 8};
    var sigman: dimensionless {init: 1};
    var xbmodsp: dimensionless {init: 1};
    var Qfapp: dimensionless {init: 6.25};
    var Qgapp: dimensionless {init: 2.5};
    var Qhf: dimensionless {init: 6.25};
    var Qhb: dimensionless {init: 6.25};
    var Qgxb: dimensionless {init: 6.25};
    var gxbmd: dimensionless;
    var gapslmd: dimensionless;
    var x_0: micrometre {pub: in};
    var TmpC: celsius {pub: in};
    var SOVFThick: dimensionless {pub: in};
    var xXBpostr: micrometre {pub: in};
    var xXBprer: micrometre {pub: in};
    fappT = fapp*xbmodsp*pow(Qfapp, (TmpC-37{celsius})/10{celsius});
    gapslmd = 1{dimensionless}+(1{dimensionless}-SOVFThick)*gslmod;
    gappT = gapp*gapslmd*xbmodsp*pow(Qgapp, (TmpC-37{celsius})/10{celsius});
    hfmd = exp(-xXBprer/abs(xXBprer)*hfmdc*sqr(xXBprer/x_0));
    hbmd = exp((xXBpostr-x_0)/abs(xXBpostr-x_0)*hbmdc*sqr((xXBpostr-x_0)/x_0));
    hfT = hf*hfmd*xbmodsp*pow(Qhf, (TmpC-37{celsius})/10{celsius});
    hbT = hb*hbmd*xbmodsp*pow(Qhb, (TmpC-37{celsius})/10{celsius});
    gxbmd = sel
      case xXBpostr < x_0:
        exp(sigmap*sqr((x_0-xXBpostr)/x_0));
      otherwise:
        exp(sigman*sqr((xXBpostr-x_0)/x_0));
    endsel;
    gxbT = gxb*gxbmd*xbmodsp*pow(Qgxb, (TmpC-37{celsius})/10{celsius});
  enddef;

  def comp regulation_and_crossbridge_cycling_state_equations as
    var XBpostr: dimensionless {pub: out, init: 1.81017564383744e-6};
    var XBprer: dimensionless {pub: out, init: 3.0494964880038e-7};
    var dXBpostr: first_order_rate_constant {pub: out};
    var dXBprer: first_order_rate_constant {pub: out};
    var N_NoXB: dimensionless {init: 0.999999959256274};
    var P_NoXB: dimensionless {init: 4.07437173988636e-8};
    var P: dimensionless;
    var N: dimensionless {init: 0.999997834540066};
    var time: millisecond {pub: in};
    var fappT: first_order_rate_constant {pub: in};
    var gappT: first_order_rate_constant {pub: in};
    var hfT: first_order_rate_constant {pub: in};
    var hbT: first_order_rate_constant {pub: in};
    var gxbT: first_order_rate_constant {pub: in};
    var kn_pT: first_order_rate_constant {pub: in};
    var kp_nT: first_order_rate_constant {pub: in};
    ode(N_NoXB, time) = kp_nT*P_NoXB-kn_pT*N_NoXB;
    ode(P_NoXB, time) = kn_pT*N_NoXB-kp_nT*P_NoXB;
    ode(N, time) = kp_nT*P-kn_pT*N;
    ode(XBprer, time) = dXBprer;
    dXBprer = fappT*P+hbT*XBpostr-(gappT*XBprer+hfT*XBprer);
    ode(XBpostr, time) = dXBpostr;
    dXBpostr = hfT*XBprer-(hbT*XBpostr+gxbT*XBpostr);
    P = 1{dimensionless}-N-XBprer-XBpostr;
  enddef;

  def comp mean_strain_of_strongly_bound_states as
    var xXBpostr: micrometre {pub: out, init: 0.00700005394873882};
    var xXBprer: micrometre {pub: out, init: 3.41212828972468e-8};
    var dxXBpostr: micrometre_per_millisecond {pub: out};
    var dxXBprer: micrometre_per_millisecond {pub: out};
    var xPsi: dimensionless {init: 2};
    var dutyprer: dimensionless;
    var dutypostr: dimensionless;
    var time: millisecond {pub: in};
    var dSL: micrometre_per_millisecond {pub: in};
    var x_0: micrometre {pub: in};
    var fappT: first_order_rate_constant {pub: in};
    var gappT: first_order_rate_constant {pub: in};
    var hfT: first_order_rate_constant {pub: in};
    var hbT: first_order_rate_constant {pub: in};
    var gxbT: first_order_rate_constant {pub: in};
    ode(xXBprer, time) = dxXBprer;
    dxXBprer = dSL/2{dimensionless}+xPsi/dutyprer*(fappT*(-xXBprer)+hbT*(xXBpostr-(x_0+xXBprer)));
    ode(xXBpostr, time) = dxXBpostr;
    dxXBpostr = dSL/2{dimensionless}+xPsi/dutypostr*hfT*(xXBprer+x_0-xXBpostr);
    dutyprer = (hbT*fappT+gxbT*fappT)/(fappT*hfT+gxbT*hfT+gxbT*gappT+hbT*fappT+hbT*gappT+gxbT*fappT);
    dutypostr = fappT*hfT/(fappT*hfT+gxbT*hfT+gxbT*gappT+hbT*fappT+hbT*gappT+gxbT*fappT);
  enddef;

  def comp normalised_active_and_passive_force as
    var SSXBpostr: dimensionless {pub: out};
    var SSXBprer: dimensionless {pub: out};
    var dSL: micrometre_per_millisecond {pub: out};
    var SL: micrometre {pub: out, init: 1.89999811516093};
    var SLmin: micrometre {pub: out, init: 1.4};
    var SLmax: micrometre {pub: out, init: 2.4};
    var kxb: millinewton_per_millimetre2 {init: 120};
    var Fnordv: millinewton_micrometre_per_millimetre2;
    var force: millinewton_micrometre_per_millimetre2;
    var active: unit_normalised_force;
    var ppforce: unit_normalised_force;
    var ppforce_t: unit_normalised_force;
    var ppforce_c: unit_normalised_force;
    var preload: unit_normalised_force;
    var afterload: unit_normalised_force;
    var intf: unit_normalised_force_millisecond {init: -4.5113452510363e-6};
    var SL_c: micrometre {init: 2.25};
    var SLrest: micrometre {init: 1.85};
    var SLset: micrometre {init: 1.9};
    var PCon_t: unit_normalised_force {init: 0.002};
    var PExp_t: per_micrometre {init: 10};
    var PCon_c: unit_normalised_force {init: 0.02};
    var PExp_c: per_micrometre {init: 70};
    var massf: unit_normalised_force_millisecond2_per_micrometre {init: 50};
    var visc: unit_normalised_force_millisecond_per_micrometre {init: 3};
    var KSE: unit_normalised_force_per_micrometre {init: 1};
    var x_0: micrometre {pub: in};
    var fapp: first_order_rate_constant {pub: in};
    var gapp: first_order_rate_constant {pub: in};
    var hf: first_order_rate_constant {pub: in};
    var hb: first_order_rate_constant {pub: in};
    var gxb: first_order_rate_constant {pub: in};
    var time: millisecond {pub: in};
    var fappT: first_order_rate_constant {pub: in};
    var gappT: first_order_rate_constant {pub: in};
    var hfT: first_order_rate_constant {pub: in};
    var hbT: first_order_rate_constant {pub: in};
    var gxbT: first_order_rate_constant {pub: in};
    var XBpostr: dimensionless {pub: in};
    var XBprer: dimensionless {pub: in};
    var xXBpostr: micrometre {pub: in};
    var xXBprer: micrometre {pub: in};
    var SOVFThick: dimensionless {pub: in};
    var SEon: dimensionless {init: 1};
    SSXBprer = (hb*fapp+gxb*fapp)/(fapp*hf+gxb*hf+gxb*gapp+hb*fapp+hb*gapp+gxb*fapp);
    SSXBpostr = fapp*hf/(fapp*hf+gxb*hf+gxb*gapp+hb*fapp+hb*gapp+gxb*fapp);
    Fnordv = kxb*x_0*SSXBpostr;
    force = kxb*SOVFThick*(xXBpostr*XBpostr+xXBprer*XBprer);
    active = 1{unit_normalised_force}*force/Fnordv;
    ppforce_t = (SL-SLrest)/abs(SL-SLrest)*PCon_t*(exp(PExp_t*abs(SL-SLrest))-1{dimensionless});
    ppforce_c = sel
      case SL > SL_c:
        PCon_c*(exp(PExp_c*abs(SL-SL_c))-1{dimensionless});
      otherwise:
        0{unit_normalised_force};
    endsel;
    ppforce = ppforce_t+ppforce_c;
    preload = abs(SLset-SLrest)/(SLset-SLrest)*PCon_t*(exp(PExp_t*abs(SLset-SLrest))-1{dimensionless});
    afterload = sel
      case SEon == 1{dimensionless}:
        KSE*(SLset-SL);
      otherwise:
        0{unit_normalised_force};
    endsel;
    ode(SL, time) = dSL;
    dSL = sel
      case (SL <= SLmax) and (SL > SLmin):
        (intf+(SLset-SL)*visc)/massf;
      otherwise:
        0{micrometre_per_millisecond};
    endsel;
    ode(intf, time) = preload+afterload-(ppforce+active);
  enddef;

  def comp calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding as
    var FrSBXB: dimensionless;
    var dFrSBXB: first_order_rate_constant;
    var dsovr_ze: micrometre_per_millisecond;
    var dsovr_cle: micrometre_per_millisecond;
    var dlen_sovr: micrometre_per_millisecond;
    var dSOVFThick: first_order_rate_constant;
    var dSOVFThin: first_order_rate_constant;
    var kxb: millinewton_per_millimetre2 {init: 120};
    var dforce: millinewton_micrometre_per_millimetre2_per_millisecond;
    var Trop_conc: micromolar {init: 70};
    var TropTot: micromolar;
    var dTropTot: micromolar_per_millisecond;
    var dSL: micrometre_per_millisecond {pub: in};
    var SL: micrometre {pub: in};
    var dXBpostr: first_order_rate_constant {pub: in};
    var dXBprer: first_order_rate_constant {pub: in};
    var dxXBpostr: micrometre_per_millisecond {pub: in};
    var dxXBprer: micrometre_per_millisecond {pub: in};
    var XBpostr: dimensionless {pub: in};
    var XBprer: dimensionless {pub: in};
    var xXBpostr: micrometre {pub: in};
    var xXBprer: micrometre {pub: in};
    var SSXBpostr: dimensionless {pub: in};
    var SSXBprer: dimensionless {pub: in};
    var SOVFThick: dimensionless {pub: in};
    var SOVFThin: dimensionless {pub: in};
    var len_thin: micrometre {pub: in};
    var len_thick: micrometre {pub: in};
    var len_hbare: micrometre {pub: in};
    var TRPNCaL: dimensionless {pub: in};
    var TRPNCaH: dimensionless {pub: in};
    var dTRPNCaL: first_order_rate_constant {pub: in};
    var dTRPNCaH: first_order_rate_constant {pub: in};
    FrSBXB = (XBpostr+XBprer)/(SSXBpostr+SSXBprer);
    dFrSBXB = (dXBpostr+dXBprer)/(SSXBpostr+SSXBprer);
    dsovr_ze = sel
      case SL < len_thick:
        -0.5{dimensionless}*dSL;
      otherwise:
        0{micrometre_per_millisecond};
    endsel;
    dsovr_cle = sel
      case 2{dimensionless}*len_thin-SL > len_hbare:
        -0.5{dimensionless}*dSL;
      otherwise:
        0{micrometre_per_millisecond};
    endsel;
    dlen_sovr = dsovr_ze-dsovr_cle;
    dSOVFThin = dlen_sovr/len_thin;
    dSOVFThick = 2{dimensionless}*dlen_sovr/(len_thick-len_hbare);
    TropTot = Trop_conc*((1{dimensionless}-SOVFThin)*TRPNCaL+SOVFThin*(FrSBXB*TRPNCaH+(1{dimensionless}-FrSBXB)*TRPNCaL));
    dTropTot = Trop_conc*(-dSOVFThin*TRPNCaL+(1{dimensionless}-SOVFThin)*dTRPNCaL+dSOVFThin*(FrSBXB*TRPNCaH+(1{dimensionless}-FrSBXB)*TRPNCaL)+SOVFThin*(dFrSBXB*TRPNCaH+FrSBXB*dTRPNCaH+(1{dimensionless}-FrSBXB)*dTRPNCaL-dFrSBXB*TRPNCaL));
    dforce = kxb*dSOVFThick*(xXBpostr*XBpostr+xXBprer*XBprer)+kxb*SOVFThick*(dxXBpostr*XBpostr+xXBpostr*dXBpostr+dxXBprer*XBprer+xXBprer*dXBprer);
  enddef;

  def comp equation_for_simulated_calcium_transient as
    var Cai: micromolar {pub: out};
    var beta: dimensionless;
    var tau1: millisecond {init: 20};
    var tau2: millisecond {init: 110};
    var start_time: millisecond {init: 5};
    var Ca_amplitude: micromolar {init: 1.45};
    var Ca_diastolic: micromolar {init: 0.09};
    var time: millisecond {pub: in};
    beta = pow(tau1/tau2, -1{dimensionless}/(tau1/tau2-1{dimensionless}))-pow(tau1/tau2, -1{dimensionless}/(1{dimensionless}-tau2/tau1));
    Cai = sel
      case time > start_time:
        (Ca_amplitude-Ca_diastolic)/beta*(exp(-(time-start_time)/tau1)-exp(-(time-start_time)/tau2))+Ca_diastolic;
      otherwise:
        Ca_diastolic;
    endsel;
  enddef;

  def comp model_parameters as
    var len_thin: micrometre {pub: out, init: 1.2};
    var len_thick: micrometre {pub: out, init: 1.65};
    var len_hbare: micrometre {pub: out, init: 0.1};
    var TmpC: celsius {pub: out, init: 24};
    var x_0: micrometre {pub: out, init: 0.007};
  enddef;
  def map between Ca_binding_to_troponin_to_thin_filament_regulation and environment for
    vars time and time;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and environment for
    vars time and time;
  enddef;
  def map between mean_strain_of_strongly_bound_states and environment for
    vars time and time;
  enddef;
  def map between normalised_active_and_passive_force and environment for
    vars time and time;
  enddef;
  def map between equation_for_simulated_calcium_transient and environment for
    vars time and time;
  enddef;
  def map between sarcomere_geometry and normalised_active_and_passive_force for
    vars SLmax and SLmax;
    vars SLmin and SLmin;
    vars SL and SL;
    vars SOVFThick and SOVFThick;
  enddef;
  def map between sarcomere_geometry and model_parameters for
    vars len_thin and len_thin;
    vars len_thick and len_thick;
    vars len_hbare and len_hbare;
  enddef;
  def map between Ca_binding_to_troponin_to_thin_filament_regulation and model_parameters for
    vars TmpC and TmpC;
  enddef;
  def map between Ca_binding_to_troponin_to_thin_filament_regulation and equation_for_simulated_calcium_transient for
    vars Cai and Cai;
  enddef;
  def map between Ca_binding_to_troponin_to_thin_filament_regulation and sarcomere_geometry for
    vars SOVFThin and SOVFThin;
  enddef;
  def map between thin_filament_regulation_and_crossbridge_cycling_rates and model_parameters for
    vars x_0 and x_0;
    vars TmpC and TmpC;
  enddef;
  def map between thin_filament_regulation_and_crossbridge_cycling_rates and sarcomere_geometry for
    vars SOVFThick and SOVFThick;
  enddef;
  def map between thin_filament_regulation_and_crossbridge_cycling_rates and mean_strain_of_strongly_bound_states for
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
    vars fappT and fappT;
    vars gappT and gappT;
    vars hfT and hfT;
    vars hbT and hbT;
    vars gxbT and gxbT;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and thin_filament_regulation_and_crossbridge_cycling_rates for
    vars fappT and fappT;
    vars gappT and gappT;
    vars hfT and hfT;
    vars hbT and hbT;
    vars gxbT and gxbT;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and Ca_binding_to_troponin_to_thin_filament_regulation for
    vars kn_pT and kn_pT;
    vars kp_nT and kp_nT;
  enddef;
  def map between mean_strain_of_strongly_bound_states and model_parameters for
    vars x_0 and x_0;
  enddef;
  def map between normalised_active_and_passive_force and thin_filament_regulation_and_crossbridge_cycling_rates for
    vars fapp and fapp;
    vars gapp and gapp;
    vars hf and hf;
    vars hb and hb;
    vars gxb and gxb;
    vars fappT and fappT;
    vars gappT and gappT;
    vars hfT and hfT;
    vars hbT and hbT;
    vars gxbT and gxbT;
  enddef;
  def map between normalised_active_and_passive_force and regulation_and_crossbridge_cycling_state_equations for
    vars XBpostr and XBpostr;
    vars XBprer and XBprer;
  enddef;
  def map between normalised_active_and_passive_force and mean_strain_of_strongly_bound_states for
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
    vars dSL and dSL;
  enddef;
  def map between normalised_active_and_passive_force and model_parameters for
    vars x_0 and x_0;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and model_parameters for
    vars len_thin and len_thin;
    vars len_thick and len_thick;
    vars len_hbare and len_hbare;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and Ca_binding_to_troponin_to_thin_filament_regulation for
    vars TRPNCaL and TRPNCaL;
    vars TRPNCaH and TRPNCaH;
    vars dTRPNCaL and dTRPNCaL;
    vars dTRPNCaH and dTRPNCaH;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and regulation_and_crossbridge_cycling_state_equations for
    vars XBpostr and XBpostr;
    vars XBprer and XBprer;
    vars dXBpostr and dXBpostr;
    vars dXBprer and dXBprer;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and mean_strain_of_strongly_bound_states for
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
    vars dxXBpostr and dxXBpostr;
    vars dxXBprer and dxXBprer;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and normalised_active_and_passive_force for
    vars SSXBpostr and SSXBpostr;
    vars SSXBprer and SSXBprer;
    vars SL and SL;
    vars dSL and dSL;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and sarcomere_geometry for
    vars SOVFThin and SOVFThin;
    vars SOVFThick and SOVFThick;
  enddef;
enddef;
