<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  cui_kaandorp_2006.xml

CREATED :  26th May 2007

LAST MODIFIED : 26th May 2007

AUTHOR :  Catherine Lloyd
          The Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Cui and Kaandorp's 2006 mathematical model of calcium homeostasis in yeast cells.

CHANGES:  
 
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" cmeta:id="cui_kaandorp_2006" name="cui_kaandorp_2006">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Mathematical modelling of calcium homeostasis in yeast cells</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
<section id="sec_status">
        <title>Model Status</title>
        <para>
            This model runs in OpenCell and COR. This version is able to reproduce figures from the original publication, although some tweeking of variables is required to produce the full range of figures. The model is currently parameterised to reproduce Fig 2a.  The units have been checked and they are consistent.
          </para>
      </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
ABSTRACT: In this study, based on currently available experimental observations on protein level, we constructed a mathematical model to describe calcium homeostasis in normally growing yeast cells (Saccharomyces cerevisiae). Simulation results show that tightly controlled low cytosolic calcium ion level can be a natural result under the general mechanism of gene expression feedback control. The calmodulin (a sensor protein) behavior in our model cell agrees well with relevant observations in real cells. Moreover, our model can qualitatively reproduce the experimentally observed response curve of real yeast cell responding to step-like disturbance in extracellular calcium ion concentration. Further investigations show that the feedback control mechanism in our model is as robust as it is in real cells.</para>

<para>
The original paper reference is cited below:
</para>

<para>
Mathematical modeling of calcium homeostasis in yeast cells, Jiangjun Cui and Jaap A. Kaandorp, 2006, 
            <emphasis>Cell Calcium</emphasis>, 39, 337-348. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/16445978">PubMed ID: 16445978</ulink> 
</para>

<informalfigure float="0" id="fig_simplified_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>A schematic diagram of the model</title>
    </objectinfo>
    <imagedata fileref="cui_2006.png"/>
  </imageobject>
</mediaobject>
<caption>A simplified diagram of the calcium fluxes described by the mathematical model.  Extracellular calcium enters the cell cytosol through an unknown Channel X and also, under certain conditions such as depletion of secretory calcium, through the channel Cch1p-Mid1p.  Cytosolic calcium can be pumped into the ER and Golgi through Pmrlp and into the vacuole through Pmc1p and Vcx1p.  Under the abnormal condition of extracellular hypertonic shock, the vacuoles can release calcium into cytosol through Yvclp.  Cytosolic calmodulin is a calcium-binding protein which in its bound form can activate target proteins such as calcineurin.  Activated calcineurin dephosphorylates the transcription factor Crz1p, promoting its translocation into the nucleus where it regulates the transcription of genes such as <emphasis>Pmr1</emphasis> and <emphasis>Pmc1</emphasis>.</caption>
</informalfigure>

</sect1>
</article>
</documentation>


  <units name="micromolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="minute">
    <unit units="second" multiplier="60.0"/>
  </units>
  
  <units name="flux">
    <unit units="micromolar"/>
    <unit units="minute" exponent="-1"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit units="minute" exponent="-1"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit units="micromolar" exponent="-1"/>
    <unit units="minute" exponent="-1"/>
  </units>

  <units name="fourth_order_rate_constant">
    <unit units="micromolar" exponent="-3"/>
    <unit units="minute" exponent="-1"/>
  </units>
  
  
  <component name="environment">
    <variable units="minute" public_interface="out" name="time" cmeta:id="environment_time"/>
  </component>
  
  <component name="m" cmeta:id="m">
    <variable units="micromolar" public_interface="out" cmeta:id="m_m" name="m" initial_value="0.0"/> 
    
    <variable units="fourth_order_rate_constant" name="kM_plus" initial_value="500.0"/>
    <variable units="first_order_rate_constant" name="kM_minus" initial_value="100.0"/>
    <variable units="micromolar" name="CaMtotal" initial_value="25.0"/>
    <variable units="flux" name="dmdt" cmeta:id="m_dmdt"/>
  
    <variable units="micromolar" public_interface="in" name="x"/>  
    <variable units="minute" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="calmodulin"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> m </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>  
            <ci> kM_plus </ci>
			<apply>
              <minus/>
              <ci> CaMtotal </ci>
			  <ci> m </ci>
            </apply>
			<apply>
              <power/> 
              <ci> x </ci>
              <cn cellml:units="dimensionless"> 3.0 </cn> 
            </apply> 
          </apply>
          <apply>
            <times/>
            <ci> kM_minus </ci>
            <ci> m </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="dmdt">
      <apply>
        <eq/>
        <ci>dmdt</ci>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>kM_plus</ci>
            <apply>
              <minus/>
              <ci>CaMtotal</ci>
              <ci>m</ci>
            </apply>
            <apply>
              <power/>
              <ci>x</ci>
              <cn cellml:units="dimensionless">3</cn>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>kM_minus</ci>
            <ci>m</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component name="z" cmeta:id="z">
    <variable units="micromolar" public_interface="out" cmeta:id="z_z" name="z" initial_value="1.0E-8"/> 
    
    <variable units="second_order_rate_constant" name="kN_plus" initial_value="5.0"/>
    <variable units="first_order_rate_constant" name="kN_minus" initial_value="5.0"/>
    <variable units="micromolar" name="CaNtotal" initial_value="25.0"/>
    <variable units="flux" name="dzdt" cmeta:id="z_dzdt"/>
  
    <variable units="micromolar" public_interface="in" name="m"/>  
    <variable units="minute" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="calcineurin"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> z </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>  
            <ci> kN_plus </ci>
			<apply>
              <minus/>
              <ci> CaNtotal </ci>
			  <ci> z </ci>
            </apply> 
            <ci> m </ci>
          </apply>
          <apply>
            <times/>
            <ci> kN_minus </ci>
            <ci> z </ci>
          </apply>
        </apply>  
      </apply> 
    </math> 
    
	<math xmlns="http://www.w3.org/1998/Math/MathML" id="dzdt">
      <apply>
        <eq/>
        <ci>dzdt</ci>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>kN_plus</ci>
            <apply>
              <minus/>
              <ci>CaNtotal</ci>
              <ci>z</ci>
            </apply>
            <ci>m</ci>
          </apply>
          <apply>
            <times/>
            <ci>kN_minus</ci>
            <ci>z</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component name="h" cmeta:id="h">
    <variable units="dimensionless" public_interface="out" name="h" initial_value="0.0"/> 
    
    <variable units="first_order_rate_constant" name="d" initial_value="0.4"/>
    <variable units="first_order_rate_constant" name="f" initial_value="0.1"/>
    
    <variable units="micromolar" public_interface="in" name="z"/> 
    <variable units="dimensionless" public_interface="in" name="phi"/>  
    <variable units="minute" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="nuclear Crz1p"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> h </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>  
            <ci> d </ci>
            <ci> phi </ci>
            <apply>
              <divide/> 
              <cn cellml:units="micromolar"> 1.0 </cn>
              <ci> z </ci> 
            </apply>
            <apply>
              <minus/> 
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <ci> h </ci> 
            </apply>
          </apply> 
          <apply>
            <times/>
            <ci> f </ci>
            <apply>
              <minus/> 
              <cn cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <times/>  
                <ci> phi </ci>
                <apply>
                  <divide/> 
                  <cn cellml:units="micromolar"> 1.0 </cn>
                  <ci> z </ci> 
                </apply>
              </apply>
            </apply>
            <ci> h </ci> 
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component name="phi">
    <variable units="dimensionless" public_interface="out" name="phi"/> 
    
    <variable units="dimensionless" public_interface="in" name="lamda"/> 
    <variable units="dimensionless" public_interface="in" name="L0"/>
    <variable units="dimensionless" public_interface="in" name="y"/> 
    <variable units="dimensionless" public_interface="in" name="N"/>  
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> phi </ci> 
        <apply>
          <divide/>
          <cn cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <plus/>  
            <cn cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <divide/>
              <apply>
                <times/>  
                <ci> L0 </ci>
                <apply>
                  <minus/>
                  <apply>
                    <power/> 
                    <apply>
                      <times/>  
                      <ci> lamda </ci>  
                      <ci> y </ci>
                    </apply>
                    <apply>
                      <plus/>  
                      <ci> N </ci>  
                      <cn cellml:units="dimensionless"> 1.0 </cn>
                    </apply>
                  </apply> 
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <apply>
                    <times/>  
                    <ci> lamda </ci>  
                    <ci> y </ci>
                  </apply>
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                </apply>
                <apply>
                  <divide/>  
                  <apply>
                    <minus/>
                    <ci> y </ci> 
                    <cn cellml:units="dimensionless"> 1.0 </cn>
                  </apply>
                  <apply>
                    <minus/>
                    <apply>
                      <power/>
                      <ci> y </ci> 
                      <apply>
                        <plus/>  
                        <ci> N </ci>  
                        <cn cellml:units="dimensionless"> 1.0 </cn>
                      </apply>
                    </apply> 
                    <cn cellml:units="dimensionless"> 1.0 </cn>
                  </apply>
                </apply>
              </apply>
            </apply> 
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component name="psi">
    <variable units="dimensionless" public_interface="out" name="psi"/> 
    
    <variable units="dimensionless" public_interface="in" name="lamda"/> 
    <variable units="dimensionless" public_interface="in" name="L0"/>
    <variable units="dimensionless" public_interface="in" name="y"/> 
    <variable units="dimensionless" public_interface="in" name="N"/>  
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> psi </ci> 
        <apply>
          <divide/>
          <apply>
            <plus/>  
            <cn cellml:units="dimensionless"> 1.0 </cn> 
            <ci> L0 </ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <power/>
                  <ci> y </ci> 
                  <apply>
                    <plus/>  
                    <ci> N </ci>  
                    <cn cellml:units="dimensionless"> 1.0 </cn>
                  </apply>
                </apply> 
                <cn cellml:units="dimensionless"> 1.0 </cn>
              </apply>
              <apply>
                <minus/>
                <ci> y </ci>
                <cn cellml:units="dimensionless"> 1.0 </cn>
              </apply>
            </apply>
            <apply>
              <times/>  
              <ci> L0 </ci>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <power/> 
                    <apply>
                      <times/>  
                      <ci> lamda </ci>  
                      <ci> y </ci>
                    </apply>
                    <apply>
                      <plus/>  
                      <ci> N </ci>  
                      <cn cellml:units="dimensionless"> 1.0 </cn>
                    </apply>
                  </apply> 
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>  
                    <ci> lamda </ci>  
                    <ci> y </ci>
                  </apply>
                  <cn cellml:units="dimensionless"> 1.0 </cn>
                </apply>
              </apply>
            </apply> 
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>

  <component name="x" cmeta:id="x">
    <variable units="micromolar" public_interface="out" cmeta:id="x_x" name="x" initial_value="0.0"/> 
    
    <variable units="flux" name="Vx" initial_value="1000.0"/>
    <variable units="micromolar" name="Kx" initial_value="500.0"/>
    <variable units="flux" name="V1" initial_value="30000.0"/>
    <variable units="micromolar" name="K1" initial_value="4.3"/>
    <variable units="flux" name="V2" initial_value="100.0"/>
    <variable units="micromolar" name="K2" initial_value="0.1"/>
    <variable units="flux" name="V3" initial_value="10000.0"/>
    <variable units="micromolar" name="K3" initial_value="100.0"/>
    <variable units="dimensionless" name="kc" initial_value="10.0"/>
    <variable units="first_order_rate_constant" name="alpha" initial_value="0.006"/>
    <variable units="micromolar" name="Caex" initial_value="1.0"/>
    <variable units="flux" name="dxdt" cmeta:id="x_dxdt"/>
    
    <variable units="dimensionless" public_interface="in" name="h"/>
    <variable units="dimensionless" public_interface="in" name="psi"/>
    <variable units="micromolar" public_interface="in" name="z"/>
    <variable units="minute" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="Cytosolic Calcium"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> x </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <divide/>
            <apply>
              <times/>  
              <ci> Vx </ci>
              <ci> Caex </ci>
            </apply>
            <apply>
              <plus/>  
              <ci> Kx </ci>
              <ci> Caex </ci>
            </apply>
          </apply>
          <apply>
            <plus/> 
            <apply>
              <times/>  
              <ci> h </ci>
              <ci> psi </ci>
              <apply>
                <divide/>
                <cn cellml:units="micromolar"> 1.0 </cn> 
                <ci> z </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>  
                  <ci> V1 </ci>
                  <ci> x </ci>
                </apply>
                <apply>
                  <plus/>  
                  <ci> K1 </ci>
                  <ci> x </ci>
                </apply>
              </apply> 
            </apply>
            <apply>
              <times/>  
              <ci> h </ci>
              <ci> psi </ci>
              <apply>
                <divide/>
                <cn cellml:units="micromolar"> 1.0 </cn> 
                <ci> z </ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>  
                  <ci> V2 </ci>
                  <ci> x </ci>
                </apply>
                <apply>
                  <plus/>  
                  <ci> K2 </ci>
                  <ci> x </ci>
                </apply>
              </apply> 
            </apply>
            <apply>
              <times/>
              <apply>
                <divide/>
                <cn cellml:units="micromolar"> 1.0 </cn>
                <apply>
                  <plus/>
                  <cn cellml:units="micromolar"> 1.0 </cn>
                  <apply>
                    <times/>  
                    <ci> kc </ci>
                    <ci> z </ci>
                  </apply>
                </apply>
              </apply>    
              <apply>
                <divide/>
                <apply>
                  <times/>  
                  <ci> V3 </ci>
                  <ci> x </ci>
                </apply>
                <apply>
                  <plus/>  
                  <ci> K3 </ci>
                  <ci> x </ci>
                </apply>
              </apply> 
            </apply>
            <apply>
              <times/>
              <ci> alpha </ci>
              <ci> x </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
   
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="dxdt">
      <apply>
        <eq/>
        <ci>dxdt</ci>
        <apply>
          <minus/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>Vx</ci>
              <ci>Caex</ci>
            </apply>
            <apply>
              <plus/>
              <ci>Kx</ci>
              <ci>Caex</ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>h</ci>
              <ci>psi</ci>
              <apply>
                <divide/>
                <cn cellml:units="micromolar">1</cn>
                <ci>z</ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci>V1</ci>
                  <ci>x</ci>
                </apply>
                <apply>
                  <plus/>
                  <ci>K1</ci>
                  <ci>x</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>h</ci>
              <ci>psi</ci>
              <apply>
                <divide/>
                <cn cellml:units="micromolar">1</cn>
                <ci>z</ci>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci>V2</ci>
                  <ci>x</ci>
                </apply>
                <apply>
                  <plus/>
                  <ci>K2</ci>
                  <ci>x</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <apply>
                <divide/>
                <cn cellml:units="micromolar">1</cn>
                <apply>
                  <plus/>
                  <cn cellml:units="micromolar">1</cn>
                  <apply>
                    <times/>
                    <ci>kc</ci>
                    <ci>z</ci>
                  </apply>
                </apply>
              </apply>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <ci>V3</ci>
                  <ci>x</ci>
                </apply>
                <apply>
                  <plus/>
                  <ci>K3</ci>
                  <ci>x</ci>
                </apply>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>alpha</ci>
              <ci>x</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="model_parameters">
    <variable units="dimensionless" public_interface="out" name="L0"/>
    <variable units="dimensionless" public_interface="out" name="N" initial_value="13.0"/>
    <variable units="dimensionless" public_interface="out" name="lamda" initial_value="5.0"/>
    <variable units="dimensionless" public_interface="out" name="y"/>
    
    <variable units="micromolar" public_interface="in" name="z"/>

    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci> L0 </ci>
        <apply>
          <power/>
          <cn cellml:units="dimensionless"> 10.0 </cn>
          <apply>
            <minus/>
            <apply>
              <divide/>
              <ci> N </ci>
              <cn cellml:units="dimensionless"> 2.0 </cn>
            </apply>
          </apply>
        </apply>
      </apply>

      <apply>
        <eq/>
        <ci> y </ci>
        <apply>
          <divide/>
          <cn cellml:units="micromolar"> 1.0 </cn>
          <ci> z </ci>
        </apply>
      </apply>
    </math>     
  </component>                     
  
  <connection>
    <map_components component_2="environment" component_1="m"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="z"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="h"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="x"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="model_parameters" component_1="phi"/>
    <map_variables variable_2="lamda" variable_1="lamda"/>
    <map_variables variable_2="L0" variable_1="L0"/>
    <map_variables variable_2="y" variable_1="y"/>
    <map_variables variable_2="N" variable_1="N"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="psi"/>
    <map_variables variable_2="lamda" variable_1="lamda"/>
    <map_variables variable_2="L0" variable_1="L0"/>
    <map_variables variable_2="y" variable_1="y"/>
    <map_variables variable_2="N" variable_1="N"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="z"/>
    <map_variables variable_2="z" variable_1="z"/>
  </connection>
  
  <connection>
    <map_components component_2="x" component_1="m"/>
    <map_variables variable_2="x" variable_1="x"/>
  </connection>

  <connection>
    <map_components component_2="z" component_1="m"/>
    <map_variables variable_2="m" variable_1="m"/>
  </connection>

  <connection>
    <map_components component_2="h" component_1="z"/>
    <map_variables variable_2="z" variable_1="z"/>
  </connection>

  <connection>
    <map_components component_2="x" component_1="z"/>
    <map_variables variable_2="z" variable_1="z"/>
  </connection>

  <connection>
    <map_components component_2="phi" component_1="h"/>
    <map_variables variable_2="phi" variable_1="phi"/>
  </connection>

  <connection>
    <map_components component_2="x" component_1="h"/>
    <map_variables variable_2="h" variable_1="h"/>
  </connection>

  <connection>
    <map_components component_2="psi" component_1="x"/>
    <map_variables variable_2="psi" variable_1="psi"/>
  </connection>
 



<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#d47cd9b3-f877-4885-a0be-71c86ef5311c">
    <rdf:li>gene expression</rdf:li>
    <rdf:li>calcium homeostasis</rdf:li>
	<rdf:li>calcium dynamics</rdf:li>
	<rdf:li>yeast</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#c6e553d3-0d4a-40cf-a23f-85a682b97f64">
    <rdf:li rdf:resource="rdf:#f3fd4e96-9669-4a04-a1bb-88b9a47fccc1"/>
    <rdf:li rdf:resource="rdf:#688b9018-b4a6-46af-b827-573321c7471e"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#02be4d75-e476-41a1-97fa-58f42bd6fb4e">
    <bqs:Pubmed_id>16445978</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#d5ba9ef6-72b9-4a13-95d6-3debe14d0872"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#e609e072-32ca-47d2-bf68-8630a7663962"/>
    <dcterms:created rdf:resource="rdf:#9c64d5de-a90d-4a9d-8132-c727416253a7"/>
    <dc:creator rdf:resource="rdf:#7955bd1b-3e9b-4eb0-b7a1-28065c45b6e3"/>
    <cmeta:modification rdf:resource="rdf:#b457fa60-aeb7-4ac3-94ec-99c1010fb9c1"/>
    <cmeta:modification rdf:resource="rdf:#d9be78b0-b579-48be-9866-cc58547308f0"/>
    <cmeta:modification rdf:resource="rdf:#ef5d38b8-f8e3-4753-a3dd-520a95a76014"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#95e3b38e-41a5-4d40-83c9-6d6ee8b0a797">
    <dcterms:W3CDTF>2007-09-07T14:34:45+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#$Tzi5E3">
    <ns7:endingValue>4</ns7:endingValue>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#$Rzi5E3">
    <ns7:boundIntervals rdf:resource="rdf:#$Szi5E3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9c64d5de-a90d-4a9d-8132-c727416253a7">
    <dcterms:W3CDTF>2007-05-26T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#812bb8c4-afca-4fb7-88d5-49a32fef37b6">
    <dc:subject rdf:resource="rdf:#3640cf92-0591-4f51-bdcb-bbb4fb8401e7"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ef5d38b8-f8e3-4753-a3dd-520a95a76014">
    <dcterms:modified rdf:resource="rdf:#1033d9fe-2b6d-4953-a913-c1927f58144a"/>
    <rdf:value>The model has now been fixed such that it runs in PCEnv and COR and can recreate the published results.  Units have been checked and are all correct and are consistent.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#efed790f-6857-4bd8-8f5e-ee8df7460a4c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#96e1b5fb-4dce-46ef-a4c8-4179f01ea7bf">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3db317fc-f00d-4efe-99e7-d3a542d303f5">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#86db658a-e33d-448b-9ca2-e7d464d462cc">
    <dcterms:W3CDTF>2006-04-00 00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#cui_kaandorp_2006">
    <ns7:simulation rdf:resource="rdf:#$Rzi5E3"/>
    <dc:title>Cui and Kaandorp's 2006 mathematical model of calcium homeostasis in yeast cells.</dc:title>
    <cmeta:comment rdf:resource="rdf:#6f1228dd-7cc3-469b-ba15-c50fa3a54849"/>
    <bqs:reference rdf:resource="rdf:#02be4d75-e476-41a1-97fa-58f42bd6fb4e"/>
    <bqs:reference rdf:resource="rdf:#812bb8c4-afca-4fb7-88d5-49a32fef37b6"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#543f23db-8128-4dd5-836c-d118c6c2f83e">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#46c09e76-3246-4204-950b-efd3e8cc2927">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#17d04a1f-e68f-4bc0-afea-51245c47cb7f">
    <vCard:Given>James</vCard:Given>
    <vCard:Family>Lawson</vCard:Family>
    <vCard:Other>Richard</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a4432733-7d7a-4431-91d0-ee1ed3b469b4">
    <dcterms:W3CDTF>2009-06-08T15:34:20+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c9b8ff6e-e99d-4f21-b3fa-93dc35ba301a">
    <vCard:Given>Jiangjun</vCard:Given>
    <vCard:Family>Cui</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#efed790f-6857-4bd8-8f5e-ee8df7460a4c">
    <vCard:N rdf:resource="rdf:#543f23db-8128-4dd5-836c-d118c6c2f83e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d5ba9ef6-72b9-4a13-95d6-3debe14d0872">
    <dc:creator rdf:resource="rdf:#c6e553d3-0d4a-40cf-a23f-85a682b97f64"/>
    <dc:title>Mathematical modeling of calcium homeostasis in yeast cells</dc:title>
    <bqs:volume>39</bqs:volume>
    <bqs:first_page>337</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#22b8e14a-9820-42d1-8222-8c4d4f066d89"/>
    <dcterms:issued rdf:resource="rdf:#86db658a-e33d-448b-9ca2-e7d464d462cc"/>
    <bqs:last_page>348</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#$Szi5E3">
    <rdf:rest rdf:resource="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
    <rdf:first rdf:resource="rdf:#$Tzi5E3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7955bd1b-3e9b-4eb0-b7a1-28065c45b6e3">
    <vCard:ORG rdf:resource="rdf:#3e6f8128-b286-42df-a408-d02381e8d0e1"/>
    <vCard:EMAIL rdf:resource="rdf:#46c09e76-3246-4204-950b-efd3e8cc2927"/>
    <vCard:N rdf:resource="rdf:#952f7f16-32e0-4ed9-b47c-36cb6846ee8b"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d9be78b0-b579-48be-9866-cc58547308f0">
    <dcterms:modified rdf:resource="rdf:#95e3b38e-41a5-4d40-83c9-6d6ee8b0a797"/>
    <rdf:value>Some extra equations have been added to define differential expressions as variables to allow them to be graphed. No changes to the guts of the model have been made.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#4897e1e4-1614-4bff-a058-b8888ec17b43"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e609e072-32ca-47d2-bf68-8630a7663962">
    <dc:creator rdf:resource="rdf:#64a31f67-ceb5-4c93-a086-cbd6a96ddce1"/>
    <rdf:value>The model has now been fixed such that it runs in PCEnv and COR and can recreate the published results.  Units have been checked and are all correct and are consistent.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d4ff9025-b994-4552-8368-1fe5c3f40540">
    <vCard:Given>Jaap</vCard:Given>
    <vCard:Family>Kaandorp</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1033d9fe-2b6d-4953-a913-c1927f58144a">
    <dcterms:W3CDTF>2007-09-01T16:31:11+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#22b8e14a-9820-42d1-8222-8c4d4f066d89">
    <dc:title>Cell Calcium</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3e6f8128-b286-42df-a408-d02381e8d0e1">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#952f7f16-32e0-4ed9-b47c-36cb6846ee8b">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6f1228dd-7cc3-469b-ba15-c50fa3a54849">
    <dc:creator rdf:resource="rdf:#3db317fc-f00d-4efe-99e7-d3a542d303f5"/>
    <rdf:value>This is the CellML description of Cui and Kaandorp's 2006 mathematical model of calcium homeostasis in yeast cells.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#64a31f67-ceb5-4c93-a086-cbd6a96ddce1">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3640cf92-0591-4f51-bdcb-bbb4fb8401e7">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#d47cd9b3-f877-4885-a0be-71c86ef5311c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#688b9018-b4a6-46af-b827-573321c7471e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#d4ff9025-b994-4552-8368-1fe5c3f40540"/>
  </rdf:Description>
  <rdf:Description rdf:about="#m">
    <dcterms:alternative>Ca-bound calmodulin</dcterms:alternative>
    <dc:title>m</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#h">
    <dcterms:alternative>nuclear fraction of Crz1p</dcterms:alternative>
    <dc:title>h</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b457fa60-aeb7-4ac3-94ec-99c1010fb9c1">
    <dcterms:modified rdf:resource="rdf:#a4432733-7d7a-4431-91d0-ee1ed3b469b4"/>
    <rdf:value>updated curation status,&#13;
removed reference link from documentation</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#554210db-7dd4-4db2-ac2c-2cc33ea9e073"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4897e1e4-1614-4bff-a058-b8888ec17b43">
    <vCard:N rdf:resource="rdf:#17d04a1f-e68f-4bc0-afea-51245c47cb7f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#554210db-7dd4-4db2-ac2c-2cc33ea9e073">
    <vCard:N rdf:resource="rdf:#96e1b5fb-4dce-46ef-a4c8-4179f01ea7bf"/>
  </rdf:Description>
  <rdf:Description rdf:about="#z">
    <dcterms:alternative>activated calcineurin</dcterms:alternative>
    <dc:title>z</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="#x">
    <dcterms:alternative>cytosolic calcium</dcterms:alternative>
    <dc:title>x</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#f3fd4e96-9669-4a04-a1bb-88b9a47fccc1">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#c9b8ff6e-e99d-4f21-b3fa-93dc35ba301a"/>
  </rdf:Description>
</rdf:RDF>
</model>