<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 11/05/2010 at 12:20:37 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="topp_2000" cmeta:id="topp_2000" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>A Model of Beta-cell Mass, Insulin, and Glucose Kinetics</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs in OpenCell and COR and the units are consistent throughout. The CellML equations are consistent with the published model, but the CellML model does not recreate the published results for unknown reasons.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: Diabetes is a disease of the glucose regulatory system that is associated with increased morbidity and early mortality. The primary variables of this system are beta-cell mass, plasma insulin concentrations, and plasma glucose concentrations. Existing mathematical models of glucose regulation incorporate only glucose and/or insulin dynamics. Here we develop a novel model of beta-cell mass, insulin, and glucose dynamics, which consists of a system of three nonlinear ordinary differential equations, where glucose and insulin dynamics are fast relative to beta-cell mass dynamics. For normal parameter values, the model has two stable fixed points (representing physiological and pathological steady states), separated on a slow manifold by a saddle point. Mild hyperglycemia leads to the growth of the beta-cell mass (negative feedback) while extreme hyperglycemia leads to the reduction of the beta-cell mass (positive feedback). The model predicts that there are three pathways in prolonged hyperglycemia: (1) the physiological fixed point can be shifted to a hyperglycemic level (regulated hyperglycemia), (2) the physiological and saddle points can be eliminated (bifurcation), and (3) progressive defects in glucose and/or insulin dynamics can drive glucose levels up at a rate faster than the adaptation of the beta-cell mass which can drive glucose levels down (dynamical hyperglycemia).
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
A Model of Beta-cell Mass, Insulin, and Glucose Kinetics: Pathways to Diabetes, Brian Topp, Keith Promislow, Gerda de Vries, Robert M. Miura and Diane T. Finegood, 2000, <emphasis>Journal of Theoretical Biology</emphasis>, 206, 605-619.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11013117&amp;dopt=Abstract">PubMed ID: 11013117</ulink>
				</para>
				<informalfigure float="0" id="fig_cell_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>Cell schematic for the model</title>
							</objectinfo>
							<imagedata fileref="topp_2000a.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the pancreatic beta-cells.  Glucose is taken up and produced in response to insulin secretion and clearance.  Beta-cell formation and loss represent the rates at which beta-cells replicate and die.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Bag rdf:about="rdf:#9caa8dd9-292c-4f82-b3ca-975b4a4662c6">
			<rdf:li>insulin-glucose dynamics</rdf:li>
			<rdf:li>signal transduction</rdf:li>
			<rdf:li>Pancreatic Beta-Cell</rdf:li>
			<rdf:li>calcium dynamics</rdf:li>
			<rdf:li>beta cell</rdf:li>
			<rdf:li>diabetes</rdf:li>
			<rdf:li>metabolism</rdf:li>
			<rdf:li>pancreas</rdf:li>
		</rdf:Bag>
		<rdf:Seq rdf:about="rdf:#019e0bc0-4312-4319-baa6-5cebff15a4f1">
			<rdf:li rdf:resource="rdf:#18b78bea-1d9f-46cd-853b-0e8b894d4b20"/>
			<rdf:li rdf:resource="rdf:#e018489e-866e-434f-b194-bc71dd3c92cd"/>
			<rdf:li rdf:resource="rdf:#f0adedfe-443b-4f17-81e7-3c32091fb9bc"/>
			<rdf:li rdf:resource="rdf:#94a53461-947e-4b9d-96f3-7ca516ab6f0a"/>
			<rdf:li rdf:resource="rdf:#317e1e97-b136-4819-8053-b89c8931966a"/>
		</rdf:Seq>
		<rdf:Description rdf:about="#topp_2000">
			<dc:title>
        Topp et al.s 2000 model of beta-cell mass, insulin, and glucose dynamics.
      </dc:title>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#e0377c89-c91d-4a02-a812-d96b380d506b"/>
			<bqs:reference rdf:resource="rdf:#eb304b25-a1ef-4b89-bf5b-e268957c2809"/>
			<bqs:reference rdf:resource="rdf:#ffbe7fe6-2e20-4d50-9cef-1ed8e6d97bbf"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#27215bb3-575c-4140-b8f3-a0f633bd6aec">
			<vCard:N rdf:resource="rdf:#49b3c134-1536-4131-a898-eb5bc53f614e"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e7f41ae2-dc73-4876-be1a-37a9f46621a7">
			<dcterms:modified rdf:resource="rdf:#6b479a37-557f-4158-ac64-d9a163d4581e"/>
			<rdf:value>
          Added publication date information.
        </rdf:value>
			<cmeta:modifier xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#27215bb3-575c-4140-b8f3-a0f633bd6aec"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f536877c-4d08-4030-82f6-8a4e21c7cde1">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
			<cmeta:modification xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#e7f41ae2-dc73-4876-be1a-37a9f46621a7"/>
			<dcterms:created rdf:resource="rdf:#1958de97-478f-4352-887d-03b4c6b70860"/>
			<dc:creator rdf:resource="rdf:#1ebcbf3e-2faf-48c3-9523-67dbde383dfc"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#18b78bea-1d9f-46cd-853b-0e8b894d4b20">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#3fc42e17-4726-4d07-94ff-eabba47777d2"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#1958de97-478f-4352-887d-03b4c6b70860">
			<dcterms:W3CDTF>2002-11-07</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#dc5cdc00-6d18-4881-8b39-cac587abab23">
			<vCard:Given>Keith</vCard:Given>
			<vCard:Family>Promislow</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#1376ab3b-0d5c-40d3-9d53-419ee7cc6d38">
			<vCard:Given>Gerda</vCard:Given>
			<vCard:Family>de Vries</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4aaa3012-fbfe-4a7f-8e90-9c036a30f1ae">
			<dc:title>Journal of Theoretical Biology</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3fc42e17-4726-4d07-94ff-eabba47777d2">
			<vCard:Given>Brian</vCard:Given>
			<vCard:Family>Topp</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#94a53461-947e-4b9d-96f3-7ca516ab6f0a">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#3566062a-e09b-4975-b555-40d87aeec95d"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#eb304b25-a1ef-4b89-bf5b-e268957c2809">
			<bqs:Pubmed_id>11013117</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#d52402cc-4a2b-445c-8f30-2dda1854d041"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#9129f6be-b997-4e91-83dc-046792cd9ab7">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d52402cc-4a2b-445c-8f30-2dda1854d041">
			<dc:creator rdf:resource="rdf:#019e0bc0-4312-4319-baa6-5cebff15a4f1"/>
			<dc:title>
            A Model of Beta-Cell Mass, Insulin, and Glucose Kinetics: Paythways to Diabetes
          </dc:title>
			<bqs:volume>206</bqs:volume>
			<bqs:first_page>605</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#4aaa3012-fbfe-4a7f-8e90-9c036a30f1ae"/>
			<dcterms:issued rdf:resource="rdf:#bb96d5d3-f4e2-45e3-bd78-63b1b2b1a809"/>
			<bqs:last_page>619</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#6b479a37-557f-4158-ac64-d9a163d4581e">
			<dcterms:W3CDTF>2003-04-09</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#bb96d5d3-f4e2-45e3-bd78-63b1b2b1a809">
			<dcterms:W3CDTF>2000-10-21</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ffbe7fe6-2e20-4d50-9cef-1ed8e6d97bbf">
			<dc:subject rdf:resource="rdf:#7b68c00e-b31a-433b-a9b8-3fb2d4856d4a"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#41d48d85-6020-4bc0-b00e-c9e1508f2bab">
			<vCard:Given>Diane</vCard:Given>
			<vCard:Family>Finegood</vCard:Family>
			<vCard:Other>T</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f0adedfe-443b-4f17-81e7-3c32091fb9bc">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#1376ab3b-0d5c-40d3-9d53-419ee7cc6d38"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#1ebcbf3e-2faf-48c3-9523-67dbde383dfc">
			<vCard:ORG rdf:resource="rdf:#9129f6be-b997-4e91-83dc-046792cd9ab7"/>
			<vCard:EMAIL rdf:resource="rdf:#04cf1f75-3c05-4aeb-9dc6-165e7f0363be"/>
			<vCard:N rdf:resource="rdf:#f536877c-4d08-4030-82f6-8a4e21c7cde1"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#317e1e97-b136-4819-8053-b89c8931966a">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#41d48d85-6020-4bc0-b00e-c9e1508f2bab"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3566062a-e09b-4975-b555-40d87aeec95d">
			<vCard:Given>Robert</vCard:Given>
			<vCard:Family>Miura</vCard:Family>
			<vCard:Other>M</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#49b3c134-1536-4131-a898-eb5bc53f614e">
			<vCard:Given>Autumn</vCard:Given>
			<vCard:Family>Cuellar</vCard:Family>
			<vCard:Other>A</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e018489e-866e-434f-b194-bc71dd3c92cd">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#dc5cdc00-6d18-4881-8b39-cac587abab23"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#04cf1f75-3c05-4aeb-9dc6-165e7f0363be">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e0377c89-c91d-4a02-a812-d96b380d506b">
			<dc:creator rdf:resource="rdf:#b13bad1e-59c4-496e-9512-834afc9a5cf7"/>
			<rdf:value>
          This is the CellML descripition of Topp et al.s 2000 model of 
          beta-cell mass, insulin, and glucose dynamics.
        </rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b13bad1e-59c4-496e-9512-834afc9a5cf7">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7b68c00e-b31a-433b-a9b8-3fb2d4856d4a">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value rdf:resource="rdf:#9caa8dd9-292c-4f82-b3ca-975b4a4662c6"/>
		</rdf:Description>
	</rdf:RDF>   
	
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="day">
      <unit units="second" multiplier="86400"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_day">
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mg">
      <unit units="gram" prefix="milli"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mg_per_dl">
      <unit units="gram" prefix="milli"/>
      <unit units="litre" prefix="deci" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mg2_per_dl2">
      <unit units="mg_per_dl" exponent="2"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mg_per_dl_per_day">
      <unit units="gram" prefix="milli"/>
      <unit units="litre" prefix="deci" exponent="-1"/>
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="U">
      <unit units="gram" multiplier="1.6605402e-24"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="microU_per_ml_per_day">
      <unit units="U" prefix="micro"/>
      <unit units="litre" prefix="milli" exponent="-1"/>
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="ml_per_microU_per_day">
      <unit units="litre" prefix="milli"/>
      <unit units="U" prefix="micro" exponent="-1"/>
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="dl_per_mg_per_day">
      <unit units="litre" prefix="deci"/>
      <unit units="gram" prefix="milli" exponent="-1"/>
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="dl2_per_mg2_per_day">
      <unit units="litre" prefix="deci" exponent="2"/>
      <unit units="gram" prefix="milli" exponent="-2"/>
      <unit units="day" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="microU_per_ml">
      <unit units="U" prefix="micro"/>
      <unit units="liter" prefix="milli" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="day" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="glucose_dynamics">
      <variable name="G" units="mg_per_dl" initial_value="600" public_interface="out"/>
      <variable name="R0" units="mg_per_dl_per_day" initial_value="846"/>
      <variable name="SI" units="ml_per_microU_per_day" initial_value="0.72"/>
      <variable name="EG0" units="per_day" initial_value="1.44"/>
      <variable name="time" units="day" public_interface="in"/>
      <variable name="I" units="microU_per_ml" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>G</ci>
            </apply>
            <apply>
               <minus/>
               <ci>R0</ci>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>EG0</ci>
                     <apply>
                        <times/>
                        <ci>SI</ci>
                        <ci>I</ci>
                     </apply>
                  </apply>
                  <ci>G</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="insulin_dynamics">
      <variable name="I" units="microU_per_ml" initial_value="0" public_interface="out"/>
      <variable name="alpha" units="mg2_per_dl2" initial_value="2000"/>
      <variable name="sigma" units="microU_per_ml_per_day" initial_value="43.2"/>
      <variable name="k" units="per_day" initial_value="432"/>
      <variable name="time" units="day" public_interface="in"/>
      <variable name="G" units="mg_per_dl" public_interface="in"/>
      <variable name="beta" units="mg" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>I</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <divide/>
                        <ci>beta</ci>
                        <cn cellml:units="mg">1</cn>
                     </apply>
                     <ci>sigma</ci>
                     <apply>
                        <power/>
                        <ci>G</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>alpha</ci>
                     <apply>
                        <power/>
                        <ci>G</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>k</ci>
                  <ci>I</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="beta_cell_dynamics">
      <variable name="beta" units="mg" initial_value="0" public_interface="out"/>
      <variable name="d0" units="per_day" initial_value="0.06"/>
      <variable name="r1" units="dl_per_mg_per_day" initial_value="0.84e-3"/>
      <variable name="r2" units="dl2_per_mg2_per_day" initial_value="0.24e-5"/>
      <variable name="time" units="day" public_interface="in"/>
      <variable name="G" units="mg_per_dl" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>beta</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>r1</ci>
                     <ci>G</ci>
                  </apply>
                  <apply>
                     <minus/>
                     <ci>d0</ci>
                  </apply>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>r2</ci>
                     </apply>
                     <apply>
                        <power/>
                        <ci>G</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                  </apply>
               </apply>
               <ci>beta</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="glucose_dynamics" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="insulin_dynamics" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="beta_cell_dynamics" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="glucose_dynamics" component_2="insulin_dynamics"/>
      <map_variables variable_1="G" variable_2="G"/>
      <map_variables variable_1="I" variable_2="I"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="glucose_dynamics" component_2="beta_cell_dynamics"/>
      <map_variables variable_1="G" variable_2="G"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="beta_cell_dynamics" component_2="insulin_dynamics"/>
      <map_variables variable_1="beta" variable_2="beta"/>
   </connection>
</model>
