<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 12/02/2010 at 2:55:04 at p.m. using:

COR (0.9.31.1333)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model name="neumann_1998" cmeta:id="neumann_1998" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Hepatitis C viral dynamics in vivo and the antiviral efficacy of interferon-alpha therapy</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This CellML model runs in both OpenCell and COR and the units are consistent. However the model is unlikely to reproduce the published results as some parameters were not defined in the paper. Values for "s" and "d" were take from a previous model by the same author (Perelson et al. 1993). For this particular model eta = 0.80, epsion = 0.99, c = 5, and delta = 0.5.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>ABSTRACT: To better understand the dynamics of hepatitis C virus and the antiviral effect of interferon-alpha-2b (IFN), viral decline in 23 patients during therapy was analyzed with a mathematical model. The analysis indicates that the major initial effect of IFN is to block virion production or release, with blocking efficacies of 81, 95, and 96% for daily doses of 5, 10, and 15 million international units, respectively. The estimated virion half-life (t1/2) was, on average, 2.7 hours, with pretreatment production and clearance of 10(12) virions per day. The estimated infected cell death rate exhibited large interpatient variation (corresponding t1/2 = 1.7 to 70 days), was inversely correlated with baseline viral load, and was positively correlated with alanine aminotransferase levels. Fast death rates were predictive of virus being undetectable by polymerase chain reaction at 3 months. These findings show that infection with hepatitis C virus is highly dynamic and that early monitoring of viral load can help guide therapy.     
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Hepatitis C viral dynamics in vivo and the antiviral efficacy of interferon-alpha therapy, Avidan U. Neumann, Nancy P. Lam, Harel Dahari, David R. Gretch, Thelma E. Wiley, Thomas J. Layden, and Alan S. Perelson, 1998, <emphasis>Science</emphasis>, 282, 103-107.  <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/9756471">PubMed ID: 9756471</ulink>
				</para>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>reaction diagram</title>
							</objectinfo>
							<imagedata fileref="neumann_1998.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the viral dynamics of Hepatitis C <emphasis>in vivo</emphasis>.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  <rdf:Description rdf:nodeID="n1">
    <endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#"
    xml:lang="en">14</endingValue>
    <pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-"
    xml:lang="en">100000</pointDensity>
  </rdf:Description>
  <rdf:Description rdf:nodeID="n2">
    <rdf:first>
      <rdf:Description rdf:nodeID="n1" />
    </rdf:first>
    <rdf:rest>
      <rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil" />
    </rdf:rest>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#80266bfb-21ae-4601-b3b4-7d7c90b717ff">

    <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
    Science</title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5c293ec0-72a0-4622-b817-956c8e30e993">

    <rdf:value xml:lang="en">This is the CellML description of
    Neumann et al's 1998 mathematical model of hepatitis C viral
    dynamics in vivo and the antiviral efficacy of interferon-alpha
    therapy.</rdf:value>
    <creator xmlns="http://purl.org/dc/elements/1.1/">
      <rdf:Description rdf:about="rdf:#3097b696-874e-4ad9-b727-dc5877eb67a3" />
    </creator>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#669babb3-1ca7-4a3d-9ff4-5534c2a3f3ea">

    <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#8c4cd6ff-e729-4f7c-a26a-929f628738ee" />
    </N>
    <rdf:type>
      <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person" />
    </rdf:type>
  </rdf:Description>
  <rdf:Description rdf:about="#I">
    <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
    I</title>
    <alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">
    productively infected cells</alternative>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bd702066-6be6-4fa1-a416-beefd7832cef">

    <rdf:value>
      <rdf:Description rdf:about="rdf:#37fc32ec-86b7-436d-b4aa-fbbd20e70277" />
    </rdf:value>
    <subject_type xmlns="http://www.cellml.org/bqs/1.0#"
    xml:lang="en">keyword</subject_type>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#58a39a65-d2bb-45ad-9524-ca40fc5d234d">

    <FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en"></FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#df50fcbe-1937-45cf-971c-34232d35eefe">

    <rdf:value xml:lang="en">c.lloyd@auckland.ac.nz</rdf:value>
    <rdf:type>
      <rdf:Description rdf:about="http://imc.org/vCard/3.0#internet" />
    </rdf:type>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3097b696-874e-4ad9-b727-dc5877eb67a3">

    <FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Catherine Lloyd</FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8c4cd6ff-e729-4f7c-a26a-929f628738ee">

    <Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">E</Other>
    <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Thelma</Given>
    <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Wiley</Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#37fc32ec-86b7-436d-b4aa-fbbd20e70277">

    <rdf:_3 xml:lang="en">viral dynamics</rdf:_3>
    <rdf:_4 xml:lang="en">pharmacology</rdf:_4>
    <rdf:_5 xml:lang="en">interferon alpha</rdf:_5>
    <rdf:_2 xml:lang="en">immunology</rdf:_2>
    <rdf:_1 xml:lang="en">hepatitis c</rdf:_1>
    <rdf:type>
      <rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag" />
    </rdf:type>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7cc3618a-2789-4a40-a16d-12593875bb84">

    <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#bcaec316-d298-48a0-aca5-9aacb1c8694a" />
    </N>
    <rdf:type>
      <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person" />
    </rdf:type>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2d7cbf3e-4559-424f-aafb-5acde2c6efcb">

    <Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">May</Other>
    <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Catherine</Given>
    <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Lloyd</Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d88cdad4-252b-4c6d-b889-9c699f862268">

    <W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">
    2004-09-08T00:00:00+00:00</W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5227ce96-a707-40f5-a300-ebd1de336d06">

    <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#6c4c44ce-7873-463f-b4dc-7a52325aa4f3" />
    </N>
    <rdf:type>
      <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person" />
    </rdf:type>
  </rdf:Description>
  <rdf:Description rdf:about="#V">
    <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
    V</title>
    <alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">
    viral load</alternative>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d042b09b-9cb6-413b-93ab-4cafb608793d">

    <Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">R</Other>
    <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">David</Given>
    <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Gretch</Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#26614980-2af6-4271-875b-5edbf2728989">

    <Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">J</Other>
    <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Thomas</Given>
    <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Layden</Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#98ec6993-a6e4-4cbc-8684-280b78444d9a">

    <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#c77eb6f9-2051-417a-998e-a640e55d33ff" />
    </N>
    <rdf:type>
      <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person" />
    </rdf:type>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#82e5b68f-c276-4af1-8b72-2cd5b7b26fef">

    <Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">The University of Auckland</Orgname>
    <Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Auckland Bioengineering Institute</Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#809acf20-bef6-4e75-8715-e91b34a151b7">

    <rdf:value xml:lang="en"></rdf:value>
    <creator xmlns="http://purl.org/dc/elements/1.1/">
      <rdf:Description rdf:about="rdf:#58a39a65-d2bb-45ad-9524-ca40fc5d234d" />
    </creator>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c1b696f5-694a-4b73-9a14-4dbfd48c243c">

    <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
    Hepatitis C Viral Dynamics in Vivo and the Antiviral Efficacy
    of Interferon-alpha Therapy</title>
    <issued xmlns="http://purl.org/dc/terms/">
      <rdf:Description rdf:about="rdf:#71d16272-f057-40b9-bd2c-b17d3c770aff" />
    </issued>
    <Journal xmlns="http://www.cellml.org/bqs/1.0#">
      <rdf:Description rdf:about="rdf:#80266bfb-21ae-4601-b3b4-7d7c90b717ff" />
    </Journal>
    <last_page xmlns="http://www.cellml.org/bqs/1.0#"
    xml:lang="en">107</last_page>
    <volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">
    282</volume>
    <first_page xmlns="http://www.cellml.org/bqs/1.0#"
    xml:lang="en">103</first_page>
    <creator xmlns="http://purl.org/dc/elements/1.1/">
      <rdf:Description rdf:about="rdf:#87b39989-494f-40e4-9165-bd1c7bc69cff" />
    </creator>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#">

      <rdf:Description rdf:about="rdf:#809acf20-bef6-4e75-8715-e91b34a151b7" />
    </cmeta:comment>
    <creator xmlns="http://purl.org/dc/elements/1.1/">
      <rdf:Description rdf:about="rdf:#213105dc-e44a-48c6-ac9b-cab6620194ce" />
    </creator>
    <publisher xmlns="http://purl.org/dc/elements/1.1/"
    xml:lang="en">The University of Auckland, Auckland Bioengineering
    Institute</publisher>
    <created xmlns="http://purl.org/dc/terms/">
      <rdf:Description rdf:about="rdf:#d88cdad4-252b-4c6d-b889-9c699f862268" />
    </created>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#62e9a94e-ce95-41f6-8226-2a49ce9e9537">

    <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#92badcfa-5862-4920-b960-036630b99528" />
    </N>
    <rdf:type>
      <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person" />
    </rdf:type>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6c4c44ce-7873-463f-b4dc-7a52325aa4f3">

    <Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">U</Other>
    <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Avidan</Given>
    <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Neumann</Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8d7c3d04-4364-4d29-befb-0b01ef7b9833">

    <subject xmlns="http://purl.org/dc/elements/1.1/">
      <rdf:Description rdf:about="rdf:#bd702066-6be6-4fa1-a416-beefd7832cef" />
    </subject>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#71d16272-f057-40b9-bd2c-b17d3c770aff">

    <W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">
    1998-10-02</W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="#T">
    <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
    T</title>
    <alternative xmlns="http://purl.org/dc/terms/" xml:lang="en">
    target cells</alternative>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#87b39989-494f-40e4-9165-bd1c7bc69cff">

    <rdf:_3>
      <rdf:Description rdf:about="rdf:#7cc3618a-2789-4a40-a16d-12593875bb84" />
    </rdf:_3>
    <rdf:_6>
      <rdf:Description rdf:about="rdf:#66578c26-5e27-4a8a-bdc2-7df8ffcb2c4a" />
    </rdf:_6>
    <rdf:_7>
      <rdf:Description rdf:about="rdf:#62e9a94e-ce95-41f6-8226-2a49ce9e9537" />
    </rdf:_7>
    <rdf:_4>
      <rdf:Description rdf:about="rdf:#147ad0ef-bdc7-4ecb-bdb0-396ed7fb3d52" />
    </rdf:_4>
    <rdf:_5>
      <rdf:Description rdf:about="rdf:#669babb3-1ca7-4a3d-9ff4-5534c2a3f3ea" />
    </rdf:_5>
    <rdf:_2>
      <rdf:Description rdf:about="rdf:#98ec6993-a6e4-4cbc-8684-280b78444d9a" />
    </rdf:_2>
    <rdf:_1>
      <rdf:Description rdf:about="rdf:#5227ce96-a707-40f5-a300-ebd1de336d06" />
    </rdf:_1>
    <rdf:type>
      <rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq" />
    </rdf:type>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#213105dc-e44a-48c6-ac9b-cab6620194ce">

    <EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#df50fcbe-1937-45cf-971c-34232d35eefe" />
    </EMAIL>
    <ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#82e5b68f-c276-4af1-8b72-2cd5b7b26fef" />
    </ORG>
    <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#2d7cbf3e-4559-424f-aafb-5acde2c6efcb" />
    </N>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#92badcfa-5862-4920-b960-036630b99528">

    <Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">S</Other>
    <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Alan</Given>
    <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Perelson</Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#bcaec316-d298-48a0-aca5-9aacb1c8694a">

    <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Harel</Given>
    <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Dahari</Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#66578c26-5e27-4a8a-bdc2-7df8ffcb2c4a">

    <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#26614980-2af6-4271-875b-5edbf2728989" />
    </N>
    <rdf:type>
      <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person" />
    </rdf:type>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c77eb6f9-2051-417a-998e-a640e55d33ff">

    <Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">P</Other>
    <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Nancy</Given>
    <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"
    xml:lang="en">Lam</Family>
  </rdf:Description>
  <rdf:Description rdf:about="#neumann_1998">
    <cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#">

      <rdf:Description rdf:about="rdf:#5c293ec0-72a0-4622-b817-956c8e30e993" />
    </cmeta:comment>
    <reference xmlns="http://www.cellml.org/bqs/1.0#">
      <rdf:Description rdf:about="rdf:#8d7c3d04-4364-4d29-befb-0b01ef7b9833" />
    </reference>
    <reference xmlns="http://www.cellml.org/bqs/1.0#">
      <rdf:Description rdf:about="rdf:#d8c42b42-001c-4137-acbf-34520fe76247" />
    </reference>
    <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
    Neumann et al's 1998 mathematical model of hepatitis C viral
    dynamics in vivo and the antiviral efficacy of interferon-alpha
    therapy.</title>
    <simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#">

      <rdf:Description rdf:nodeID="n3" />
    </simulation>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d8c42b42-001c-4137-acbf-34520fe76247">

    <Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#"
    xml:lang="en">9756471</Pubmed_id>
    <JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
      <rdf:Description rdf:about="rdf:#c1b696f5-694a-4b73-9a14-4dbfd48c243c" />
    </JournalArticle>
  </rdf:Description>
  <rdf:Description rdf:nodeID="n3">
    <boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#">

      <rdf:Description rdf:nodeID="n2" />
    </boundIntervals>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#147ad0ef-bdc7-4ecb-bdb0-396ed7fb3d52">

    <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
      <rdf:Description rdf:about="rdf:#d042b09b-9cb6-413b-93ab-4cafb608793d" />
    </N>
    <rdf:type>
      <rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person" />
    </rdf:type>
  </rdf:Description>
</rdf:RDF>

	  
   <units name="day">
      <unit units="second" multiplier="86400"/>
   </units>
   <units name="first_order_rate_constant">
      <unit units="day" exponent="-1"/>
   </units>
   
   <component name="environment">
      <variable name="time" units="day" public_interface="out"/>
   </component>
   
   <component name="target_cells">
      <variable name="T" units="dimensionless" initial_value="1000" public_interface="out"/>
      <variable name="s" units="first_order_rate_constant" initial_value="10.0"/>
	  <variable name="d" units="first_order_rate_constant" initial_value="0.02"/>
      <variable name="eta" units="dimensionless" public_interface="in"/>
      <variable name="V" units="dimensionless" public_interface="in"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>T</ci>
            </apply>
			<apply>
               <minus/>
			   <ci>s</ci>
               <apply>
                  <plus/>
			      <apply>
                     <times/>
                     <ci>d</ci>
                     <ci>T</ci>
                  </apply>
				  <apply>
                     <times/>
                     <apply>
                        <minus/>
						<cn cellml:units="dimensionless">1</cn>
                        <ci>eta</ci>
					 </apply>
                     <ci>beta</ci>
					 <ci>V</ci>
					 <ci>T</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="infected_cells">
      <variable name="I" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="delta" units="first_order_rate_constant" initial_value="0.5"/>
      <variable name="beta" units="first_order_rate_constant" public_interface="in"/>
      <variable name="eta" units="dimensionless" public_interface="in"/>
      <variable name="V" units="dimensionless" public_interface="in"/>
      <variable name="T" units="dimensionless" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>I</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>eta</ci>
                  </apply>
                  <ci>beta</ci>
                  <ci>V</ci>
                  <ci>T</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>delta</ci>
                  <ci>I</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="viral_load">
      <variable name="V" units="dimensionless" initial_value="9.4e6" public_interface="out"/>
      <variable name="epsilon" units="dimensionless" initial_value="0.99"/>
      <variable name="p" units="first_order_rate_constant" initial_value="100.0"/>
      <variable name="c" units="first_order_rate_constant" initial_value="5.0"/>
      <variable name="I" units="dimensionless" public_interface="in"/>
      <variable name="time" units="day" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>epsilon</ci>
                  </apply>
                  <ci>p</ci>
                  <ci>I</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>c</ci>
                  <ci>V</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="model_parameters">
      <variable name="beta" units="first_order_rate_constant" initial_value="3e-7" public_interface="out"/>
      <variable name="eta" units="dimensionless" initial_value="0.8" public_interface="out"/>
   </component>
   
   <connection>
      <map_components component_1="target_cells" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="infected_cells" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="viral_load" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="target_cells" component_2="viral_load"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="infected_cells" component_2="target_cells"/>
      <map_variables variable_1="T" variable_2="T"/>
   </connection>
   <connection>
      <map_components component_1="infected_cells" component_2="viral_load"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="I" variable_2="I"/>
   </connection>
   <connection>
      <map_components component_1="target_cells" component_2="model_parameters"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="eta" variable_2="eta"/>
   </connection>
   <connection>
      <map_components component_1="infected_cells" component_2="model_parameters"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="eta" variable_2="eta"/>
   </connection>
</model>
