// This CellML file was generated on 28/01/2009 at 3:20:40 at p.m. using:
//
// COR (0.9.31.1125)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// created: W3CDTF 2009-06-15T00:00:00+00:00
// reference: Pubmed_id 10884416; Given Akos; Family Sveiczer; Given Attila; Family Csikasz-Nagy; Given Bela; Family Gyorffy; Given JJ; Family Tyson; Given Bela; Family Novak; title Modeling the fission yeast cell cycle: quantized cycle times in wee1- cdc25Delta mutant cells.; volume 97(14); first_page 7865; title Proc Natl Acad Sci; W3CDTF 2000-07-05 00:00; last_page 7870
// reference: subject_type keyword; cell cycle
def model sveiczer_csikasznagy_gyorffy_tyson_novak_2000_version01 as
  // Modeling the fission yeast cell cycle: Quantized cycle times in wee1- cdc25Delta mutant cells
  //
  // Jeelean Lim
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model has been checked in COR and PCEnv and the model runs to produce results for the first cycle as in figure 2 of the published paper but does not display stable oscillations. The 'switches' described in Table 1 of the paper have not been implemented in this CellML description. Units have been checked and are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: A detailed mathematical model for the fission yeast mitotic cycle is developed based on positive and negative feedback loops by which Cdc13/Cdc2 kinase activates and inactivates itself. Positive feedbacks are created by Cdc13/Cdc2-dependent phosphorylation of specific substrates: inactivating its negative regulators (Rum1, Ste9 and Wee1/Mik1) and activating its positive regulator (Cdc25). A slow negative feedback loop is turned on during mitosis by activation of Slp1/anaphase-promoting complex (APC), which indirectly re-activates the negative regulators, leading to a drop in Cdc13/Cdc2 activity and exit from mitosis.
  //
  // The model explains how fission yeast cells can exit mitosis in the absence of Ste9 (Cdc13 degradation) and Rum1 (an inhibitor of Cdc13/Cdc2). We also show that, if the positive feedback loops accelerating the G2/M transition (through Wee1 and Cdc25) are weak, then cells can reset back to G2 from early stages of mitosis by premature activation of the negative feedback loop. This resetting can happen more than once, resulting in a quantized distribution of cycle times, as observed experimentally in wee1 - cdc25delta mutant cells. Our quantitative description of these quantized cycles demonstrates the utility of mathematical modeling, because these cycles cannot be understood by intuitive arguments alone.
  //
  // The complete original paper reference is cited below:
  //
  // Modeling the fission yeast cell cycle: Quantized cycle times in wee12- cdc25 mutant cells, Akos Sveiczer, Attila Csikasz-Nagi, Bela Gyorffy, John J. Tyson, and Bela Novak, 2000, PNAS, 97, 7865-7870. PubMed ID: 10884416 (http://www.ncbi.nlm.nih.gov/pubmed/10884416)
  //
  // figure 1
  //
  // A molecular mechanism for the regulation of Cdc13-associated kinase activity in fission yeast.
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp MPF as
    var MPF: dimensionless {pub: out, init: 0};
    var k1: first_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    var kwee: first_order_rate_constant {pub: in};
    var kc25: first_order_rate_constant {pub: in};
    var kj: first_order_rate_constant {pub: in};
    var kjr: first_order_rate_constant {pub: in};
    var k6_: first_order_rate_constant {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var mass: dimensionless {pub: in};
    var preMPF: dimensionless {pub: in};
    var Rum1: dimensionless {pub: in};
    var Rum1P: dimensionless {pub: in};
    var CR: dimensionless {pub: in};
    var CRP: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(MPF, time) = k1*mass-k2*MPF-kwee*MPF+kc25*preMPF-kj*MPF*(Rum1+Rum1P)+kjr*(CR+CRP)+k6_*CR+(k6_+k6)*CRP;
  enddef;

  def comp preMPF as
    var preMPF: dimensionless {pub: out, init: 1};
    var kwee: first_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    var kc25: first_order_rate_constant {pub: in};
    var MPF: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(preMPF, time) = kwee*MPF-kc25*preMPF-k2*preMPF;
  enddef;

  def comp Ste9 as
    var Ste9: dimensionless {pub: out, init: 0};
    var kste9r_: first_order_rate_constant {pub: in};
    var kste9r: first_order_rate_constant {pub: in};
    var kste9: first_order_rate_constant {pub: in};
    var Jste9r: dimensionless {init: 0.01};
    var Jste9: dimensionless {init: 0.01};
    var MPF_a: dimensionless {pub: in};
    var PP: dimensionless {pub: in};
    var SK: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Ste9, time) = (kste9r_+kste9r*PP)*(1{dimensionless}-Ste9)/(Jste9r+1{dimensionless}-Ste9)-kste9*(MPF_a+SK*mass)*Ste9/(Jste9+Ste9);
  enddef;

  def comp Mik1 as
    var Mik1: dimensionless {pub: out, init: 0};
    var ks: first_order_rate_constant {pub: in};
    var kmr_: first_order_rate_constant {pub: in};
    var kmr: first_order_rate_constant {pub: in};
    var km: first_order_rate_constant {pub: in};
    var Jmikr: dimensionless {init: 0.15};
    var Jmik: dimensionless {init: 0.15};
    var MPF_a: dimensionless {pub: in};
    var PP: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Mik1, time) = (ks+kmr_+kmr*PP)*(1{dimensionless}-Mik1)/(Jmikr+1{dimensionless}-Mik1)-km*MPF_a*Mik1/(Jmik+Mik1);
  enddef;

  def comp Wee1 as
    var Wee1: dimensionless {pub: out, init: 0};
    var kwr_: first_order_rate_constant {pub: in};
    var kwr: first_order_rate_constant {pub: in};
    var kw: first_order_rate_constant {pub: in};
    var Jweer: dimensionless {init: 0.2};
    var Jwee: dimensionless {init: 0.2};
    var MPF_a: dimensionless {pub: in};
    var PP: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Wee1, time) = (kwr_+kwr*PP)*(1{dimensionless}-Wee1)/(Jweer+1{dimensionless}-Wee1)-kw*MPF_a*Wee1/(Jwee+Wee1);
  enddef;

  def comp Cdc25 as
    var Cdc25: dimensionless {pub: out, init: 0};
    var k25: first_order_rate_constant {pub: in};
    var k5: first_order_rate_constant {pub: in};
    var k25r_: first_order_rate_constant {pub: in};
    var k25r: first_order_rate_constant {pub: in};
    var J25: dimensionless {init: 0.05};
    var J25r: dimensionless {init: 0.05};
    var MPF_a: dimensionless {pub: in};
    var PP: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Cdc25, time) = k25*MPF_a*(1{dimensionless}-Cdc25)/(J25+1{dimensionless}-Cdc25)-(k5+k25r_+k25r*PP)*Cdc25/(J25r+Cdc25);
  enddef;

  def comp Slp1 as
    var Slp1: dimensionless {pub: out, init: 0};
    var kas: first_order_rate_constant {pub: in};
    var kad: first_order_rate_constant {pub: in};
    var MPF_a: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Slp1, time) = kas*MPF_a-kad*Slp1;
  enddef;

  def comp Slp1_a as
    var Slp1_a: dimensionless {pub: out, init: 0};
    var kaa_: first_order_rate_constant {pub: in};
    var kaa: first_order_rate_constant {pub: in};
    var kai: first_order_rate_constant {pub: in};
    var kad: first_order_rate_constant {pub: in};
    var MPF_a: dimensionless {pub: in};
    var Slp1: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Slp1_a, time) = (kaa_+kaa*MPF_a)*(Slp1-Slp1_a)-(kai+kad)*Slp1_a;
  enddef;

  def comp Inh as
    var Inh: dimensionless {pub: out, init: 0};
    var k3: first_order_rate_constant {pub: in};
    var ki: first_order_rate_constant {pub: in};
    var kir: first_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var PP: dimensionless {pub: in};
    var PI: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Inh, time) = k3-ki*Inh*PP+kir*PI-k4*Inh;
  enddef;

  def comp PI as
    var PI: dimensionless {pub: out, init: 0.2};
    var ki: first_order_rate_constant {pub: in};
    var kir: first_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var Inh: dimensionless {pub: in};
    var PP: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(PI, time) = ki*Inh*PP-kir*PI-k4*PI;
  enddef;

  def comp CRP as
    var CRP: dimensionless {pub: out, init: 0};
    var kp: first_order_rate_constant {pub: in};
    var kpp_: first_order_rate_constant {pub: in};
    var kpp: first_order_rate_constant {pub: in};
    var kj: first_order_rate_constant {pub: in};
    var kjr: first_order_rate_constant {pub: in};
    var k2c: first_order_rate_constant {pub: in};
    var k6_: first_order_rate_constant {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var epsilon_p: dimensionless {pub: in};
    var MPF_a: dimensionless {pub: in};
    var SK: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    var PP: dimensionless {pub: in};
    var CR: dimensionless {pub: in};
    var MPF: dimensionless {pub: in};
    var Rum1P: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(CRP, time) = kp*(MPF_a+epsilon_p*SK*mass)*CR-(kpp_+kpp*PP)*CRP+kj*MPF*Rum1P-kjr*CRP-k2c*CRP-(k6_+k6)*CRP;
  enddef;

  def comp CR as
    var CR: dimensionless {pub: out, init: 0};
    var kj: first_order_rate_constant {pub: in};
    var kjr: first_order_rate_constant {pub: in};
    var k2c: first_order_rate_constant {pub: in};
    var k6_: first_order_rate_constant {pub: in};
    var kp: first_order_rate_constant {pub: in};
    var kpp_: first_order_rate_constant {pub: in};
    var kpp: first_order_rate_constant {pub: in};
    var epsilon_p: dimensionless {pub: in};
    var Rum1: dimensionless {pub: in};
    var MPF: dimensionless {pub: in};
    var MPF_a: dimensionless {pub: in};
    var SK: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    var PP: dimensionless {pub: in};
    var CRP: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(CR, time) = kj*MPF*Rum1-kjr*CR-k2c*CR-k6_*CR-kp*(MPF_a+epsilon_p*SK*mass)*CR+(kpp_+kpp*PP)*CRP;
  enddef;

  def comp Rum1 as
    var Rum1: dimensionless {pub: out, init: 0};
    var k5: first_order_rate_constant {pub: in};
    var k6_: first_order_rate_constant {pub: in};
    var kp: first_order_rate_constant {pub: in};
    var kpp_: first_order_rate_constant {pub: in};
    var kpp: first_order_rate_constant {pub: in};
    var kj: first_order_rate_constant {pub: in};
    var kjr: first_order_rate_constant {pub: in};
    var k2c: first_order_rate_constant {pub: in};
    var epsilon_p: dimensionless {pub: in};
    var MPF_a: dimensionless {pub: in};
    var SK: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    var PP: dimensionless {pub: in};
    var Rum1P: dimensionless {pub: in};
    var MPF: dimensionless {pub: in};
    var CR: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Rum1, time) = k5-k6_*Rum1-kp*(MPF_a+epsilon_p*SK*mass)*Rum1+(kpp_+kpp*PP)*Rum1P-kj*MPF*Rum1+kjr*CR+k2c*CR;
  enddef;

  def comp Rum1P as
    var Rum1P: dimensionless {pub: out, init: 0};
    var kp: first_order_rate_constant {pub: in};
    var kpp_: first_order_rate_constant {pub: in};
    var kpp: first_order_rate_constant {pub: in};
    var k6_: first_order_rate_constant {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kj: first_order_rate_constant {pub: in};
    var kjr: first_order_rate_constant {pub: in};
    var k2c: first_order_rate_constant {pub: in};
    var epsilon_p: dimensionless {pub: in};
    var SK: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    var Rum1: dimensionless {pub: in};
    var PP: dimensionless {pub: in};
    var MPF_a: dimensionless {pub: in};
    var MPF: dimensionless {pub: in};
    var CRP: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Rum1P, time) = kp*(MPF_a+epsilon_p*SK*mass)*Rum1-(kpp_+kpp*PP)*Rum1P-(k6_+k6)*Rum1P-kj*MPF*Rum1P+kjr*CRP+k2c*CRP;
  enddef;

  def comp mass as
    var mass: dimensionless {pub: out, init: 1};
    var mu: first_order_rate_constant {init: 0.00462};
    var time: minute {pub: in};
    ode(mass, time) = mu*mass;
  enddef;

  def comp R_dna as
    var R_dna: dimensionless {pub: out, init: 1};
    var K: dimensionless {init: 0.06};
    var Y: dimensionless {init: 0};
    var MPF_a: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(R_dna, time) = K*1{first_order_rate_constant}/(1{dimensionless}+Y*MPF_a);
  enddef;

  def comp MPF_a as
    var MPF_a: dimensionless {pub: out};
    var epsilon: dimensionless {pub: in};
    var preMPF: dimensionless {pub: in};
    var MPF: dimensionless {pub: in};
    MPF_a = MPF+epsilon*preMPF;
  enddef;

  def comp PP as
    var PP: dimensionless {pub: out};
    var PI: dimensionless {pub: in};
    PP = 1{dimensionless}-PI;
  enddef;

  def comp ratio as
    var ratio: dimensionless {pub: out};
    var PP: dimensionless {pub: in};
    var MPF_a: dimensionless {pub: in};
    ratio = MPF_a/PP;
  enddef;

  def comp rate_constants as
    var k1: first_order_rate_constant {pub: out, init: 0.02};
    var k2: first_order_rate_constant {pub: out};
    var k2c: first_order_rate_constant {pub: out};
    var k3: first_order_rate_constant {pub: out, init: 0.1};
    var k4: first_order_rate_constant {pub: out};
    var k5: first_order_rate_constant {pub: out, init: 0.1};
    var k6: first_order_rate_constant {pub: out, init: 5};
    var k6_: first_order_rate_constant {pub: out, init: 0.1};
    var kwee: first_order_rate_constant {pub: out};
    var kc25: first_order_rate_constant {pub: out};
    var kp: first_order_rate_constant {pub: out, init: 100};
    var kpp_: first_order_rate_constant {pub: out, init: 1};
    var kpp: first_order_rate_constant {pub: out, init: 100};
    var kj: first_order_rate_constant {pub: out, init: 400};
    var kjr: first_order_rate_constant {pub: out, init: 1};
    var kste9: first_order_rate_constant {pub: out, init: 5};
    var kste9r: first_order_rate_constant {pub: out, init: 8};
    var kste9r_: first_order_rate_constant {pub: out, init: 0.03};
    var km: first_order_rate_constant {pub: out, init: 1};
    var kmr: first_order_rate_constant {pub: out, init: 5};
    var kmr_: first_order_rate_constant {pub: out, init: 0.01};
    var kw: first_order_rate_constant {pub: out, init: 2};
    var kwr: first_order_rate_constant {pub: out, init: 1};
    var kwr_: first_order_rate_constant {pub: out, init: 0.4};
    var k25: first_order_rate_constant {pub: out, init: 1};
    var k25r: first_order_rate_constant {pub: out, init: 2};
    var k25r_: first_order_rate_constant {pub: out, init: 0.4};
    var kas: first_order_rate_constant {pub: out, init: 0.1};
    var kad: first_order_rate_constant {pub: out, init: 0.1};
    var kaa: first_order_rate_constant {pub: out, init: 0.1};
    var kaa_: first_order_rate_constant {pub: out, init: 0.01};
    var kai: first_order_rate_constant {pub: out, init: 0.1};
    var ki: first_order_rate_constant {pub: out, init: 50};
    var kir: first_order_rate_constant {pub: out, init: 0.5};
    var ks: first_order_rate_constant {pub: out, init: 0.1};
    var V2_: first_order_rate_constant {init: 0.02};
    var V2: first_order_rate_constant {init: 1};
    var V2c: first_order_rate_constant {init: 0.5};
    var V2c_: first_order_rate_constant {init: 0.02};
    var Vwee: first_order_rate_constant {init: 10};
    var Vwee_: first_order_rate_constant {init: 0.08};
    var Vmik: first_order_rate_constant {init: 2};
    var Vmik_: first_order_rate_constant {init: 0.04};
    var V25: first_order_rate_constant {init: 10};
    var V25_: first_order_rate_constant {init: 0.05};
    var Vpyp: first_order_rate_constant {init: 0.07};
    var V4: first_order_rate_constant {init: 1};
    var V4_: first_order_rate_constant {init: 0.01};
    var Ste9: dimensionless {pub: in};
    var Wee1: dimensionless {pub: in};
    var Mik1: dimensionless {pub: in};
    var Cdc25: dimensionless {pub: in};
    var Slp1_a: dimensionless {pub: in};
    var Pyp3: dimensionless {init: 1};
    var ratio: dimensionless {pub: in};
    k2 = V2_+V2*Ste9;
    k2c = V2c_+V2c*Ste9;
    kwee = Vwee*Wee1+Vwee_*(1{dimensionless}-Wee1)+Vmik*Mik1+Vmik_*(1{dimensionless}-Mik1);
    kc25 = V25*Cdc25+V25_*(1{dimensionless}-Cdc25)+Vpyp*Pyp3;
    k4 = V4_+V4*Slp1_a;
  enddef;

  def comp dimensionless_constants as
    var SK: dimensionless {pub: out, init: 0.018};
    var epsilon: dimensionless {pub: out, init: 0.05};
    var epsilon_p: dimensionless {pub: out, init: 0.025};
  enddef;
  def map between MPF and environment for
    vars time and time;
  enddef;
  def map between preMPF and environment for
    vars time and time;
  enddef;
  def map between Ste9 and environment for
    vars time and time;
  enddef;
  def map between Mik1 and environment for
    vars time and time;
  enddef;
  def map between Wee1 and environment for
    vars time and time;
  enddef;
  def map between Cdc25 and environment for
    vars time and time;
  enddef;
  def map between Slp1 and environment for
    vars time and time;
  enddef;
  def map between Slp1_a and environment for
    vars time and time;
  enddef;
  def map between Inh and environment for
    vars time and time;
  enddef;
  def map between PI and environment for
    vars time and time;
  enddef;
  def map between CRP and environment for
    vars time and time;
  enddef;
  def map between CR and environment for
    vars time and time;
  enddef;
  def map between Rum1 and environment for
    vars time and time;
  enddef;
  def map between Rum1P and environment for
    vars time and time;
  enddef;
  def map between mass and environment for
    vars time and time;
  enddef;
  def map between R_dna and environment for
    vars time and time;
  enddef;
  def map between MPF and mass for
    vars mass and mass;
  enddef;
  def map between MPF and preMPF for
    vars preMPF and preMPF;
    vars MPF and MPF;
  enddef;
  def map between MPF and Rum1 for
    vars Rum1 and Rum1;
    vars MPF and MPF;
  enddef;
  def map between MPF and Rum1P for
    vars Rum1P and Rum1P;
    vars MPF and MPF;
  enddef;
  def map between MPF and CR for
    vars CR and CR;
    vars MPF and MPF;
  enddef;
  def map between MPF and CRP for
    vars CRP and CRP;
    vars MPF and MPF;
  enddef;
  def map between MPF and rate_constants for
    vars k1 and k1;
    vars k2 and k2;
    vars kwee and kwee;
    vars kc25 and kc25;
    vars kj and kj;
    vars kjr and kjr;
    vars k6_ and k6_;
    vars k6 and k6;
  enddef;
  def map between preMPF and rate_constants for
    vars kwee and kwee;
    vars k2 and k2;
    vars kc25 and kc25;
  enddef;
  def map between Ste9 and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between Ste9 and PP for
    vars PP and PP;
  enddef;
  def map between Ste9 and dimensionless_constants for
    vars SK and SK;
  enddef;
  def map between Ste9 and mass for
    vars mass and mass;
  enddef;
  def map between Ste9 and rate_constants for
    vars kste9r_ and kste9r_;
    vars kste9r and kste9r;
    vars kste9 and kste9;
    vars Ste9 and Ste9;
  enddef;
  def map between Mik1 and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between Mik1 and PP for
    vars PP and PP;
  enddef;
  def map between Mik1 and rate_constants for
    vars ks and ks;
    vars kmr_ and kmr_;
    vars kmr and kmr;
    vars km and km;
    vars Mik1 and Mik1;
  enddef;
  def map between Wee1 and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between Wee1 and PP for
    vars PP and PP;
  enddef;
  def map between Wee1 and rate_constants for
    vars kwr_ and kwr_;
    vars kwr and kwr;
    vars kw and kw;
    vars Wee1 and Wee1;
  enddef;
  def map between Cdc25 and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between Cdc25 and PP for
    vars PP and PP;
  enddef;
  def map between Cdc25 and rate_constants for
    vars k25 and k25;
    vars k5 and k5;
    vars k25r_ and k25r_;
    vars k25r and k25r;
    vars Cdc25 and Cdc25;
  enddef;
  def map between Slp1 and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between Slp1 and rate_constants for
    vars kas and kas;
    vars kad and kad;
  enddef;
  def map between Slp1_a and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between Slp1_a and Slp1 for
    vars Slp1 and Slp1;
  enddef;
  def map between Slp1_a and rate_constants for
    vars kaa_ and kaa_;
    vars kaa and kaa;
    vars kai and kai;
    vars kad and kad;
    vars Slp1_a and Slp1_a;
  enddef;
  def map between Inh and PP for
    vars PP and PP;
  enddef;
  def map between Inh and PI for
    vars PI and PI;
    vars Inh and Inh;
  enddef;
  def map between Inh and rate_constants for
    vars k3 and k3;
    vars ki and ki;
    vars kir and kir;
    vars k4 and k4;
  enddef;
  def map between PI and PP for
    vars PP and PP;
    vars PI and PI;
  enddef;
  def map between PI and rate_constants for
    vars ki and ki;
    vars kir and kir;
    vars k4 and k4;
  enddef;
  def map between CRP and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between CRP and mass for
    vars mass and mass;
  enddef;
  def map between CRP and PP for
    vars PP and PP;
  enddef;
  def map between CRP and CR for
    vars CR and CR;
    vars CRP and CRP;
  enddef;
  def map between CRP and Rum1P for
    vars Rum1P and Rum1P;
    vars CRP and CRP;
  enddef;
  def map between CRP and rate_constants for
    vars kp and kp;
    vars kpp_ and kpp_;
    vars kpp and kpp;
    vars kj and kj;
    vars kjr and kjr;
    vars k2c and k2c;
    vars k6_ and k6_;
    vars k6 and k6;
  enddef;
  def map between CRP and dimensionless_constants for
    vars epsilon_p and epsilon_p;
    vars SK and SK;
  enddef;
  def map between CR and Rum1 for
    vars Rum1 and Rum1;
    vars CR and CR;
  enddef;
  def map between CR and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between CR and mass for
    vars mass and mass;
  enddef;
  def map between CR and PP for
    vars PP and PP;
  enddef;
  def map between CR and rate_constants for
    vars kp and kp;
    vars kpp_ and kpp_;
    vars kpp and kpp;
    vars kj and kj;
    vars kjr and kjr;
    vars k2c and k2c;
    vars k6_ and k6_;
  enddef;
  def map between CR and dimensionless_constants for
    vars epsilon_p and epsilon_p;
    vars SK and SK;
  enddef;
  def map between Rum1 and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between Rum1 and mass for
    vars mass and mass;
  enddef;
  def map between Rum1 and PP for
    vars PP and PP;
  enddef;
  def map between Rum1 and Rum1P for
    vars Rum1P and Rum1P;
    vars Rum1 and Rum1;
  enddef;
  def map between Rum1 and rate_constants for
    vars k5 and k5;
    vars kp and kp;
    vars kpp_ and kpp_;
    vars kpp and kpp;
    vars k2c and k2c;
    vars kj and kj;
    vars kjr and kjr;
    vars k6_ and k6_;
  enddef;
  def map between Rum1 and dimensionless_constants for
    vars epsilon_p and epsilon_p;
    vars SK and SK;
  enddef;
  def map between Rum1P and mass for
    vars mass and mass;
  enddef;
  def map between Rum1P and PP for
    vars PP and PP;
  enddef;
  def map between Rum1P and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between Rum1P and rate_constants for
    vars kp and kp;
    vars kpp_ and kpp_;
    vars kpp and kpp;
    vars k2c and k2c;
    vars kj and kj;
    vars kjr and kjr;
    vars k6_ and k6_;
    vars k6 and k6;
  enddef;
  def map between Rum1P and dimensionless_constants for
    vars epsilon_p and epsilon_p;
    vars SK and SK;
  enddef;
  def map between R_dna and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between MPF_a and preMPF for
    vars preMPF and preMPF;
  enddef;
  def map between MPF_a and MPF for
    vars MPF and MPF;
  enddef;
  def map between MPF_a and dimensionless_constants for
    vars epsilon and epsilon;
  enddef;
  def map between ratio and MPF_a for
    vars MPF_a and MPF_a;
  enddef;
  def map between ratio and PP for
    vars PP and PP;
  enddef;
  def map between ratio and rate_constants for
    vars ratio and ratio;
  enddef;
enddef;
