//   FILE :  roux_model_2006.xml
//
// CREATED :  29th February 2008
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// DESCRIPTION :  This file contains a CellML description of Roux et al.'s 2006 mathematical model of calcium handling in airway myocytes.
// comment: FN Catherine Lloyd; This CellML model runs in both COR and PCEnv however the model does not replicate the published results. The units have been checked and are consistent. The original model author is working with us on the process of curation and we soon hope to have the CellML model running to replicate the published results.
// created: W3CDTF 2008-05-07T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2008-05-07T12:44:24+12:00; Equation for up in Cai up: should be x1 rather than x0 Correction to ICaL_perm1 "V-V_surf" rather than "V_surf-V" Missing "-" in alpha_d Missing 4 in eqn for i_nsCa Corrected PnsCa from 1.75e-8 to 1.75e-7; Given Penny; Family Noble
// reference: Pubmed_id 15982722; Given Etienne; Family Roux; Given Penny; Family Noble; Given Denis; Family Noble; Given Marko; Family Marhl; title Modelling of calcium handling in airway myocytes; volume 15; first_page 556; title Progress in Biophysics and Molecular Biology; W3CDTF 2006-00-00 00:00; last_page 565
// reference: subject_type keyword; calcium; smooth muscle; airway myocyte
def model roux_model_2006 as
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and PCEnv however the model does not replicate the published results. The units have been checked and are consistent. The original model author is working with us on the process of curation and we soon hope to have the CellML model running to replicate the published results.
  //
  // Model Structure
  //
  // Abstract: Airway myocytes are the primary effectors of airway reactivity which modulates airway resistance and hence ventilation. Stimulation of airway myocytes results in an increase in the cytosolic Ca2+ concentration ([Ca2+]i) and the subsequent activation of the contractile apparatus. Many contractile agonists, including acetylcholine, induce [Ca2+]i increase via Ca2+ release from the sarcoplasmic reticulum through InsP3 receptors. Several models have been developed to explain the characteristics of InsP3-induced [Ca2+]i responses, in particular Ca2+ oscillations. The article reviews the modelling of the major structures implicated in intracellular Ca2+ handling, i.e., InsP3 receptors, SERCAs, mitochondria and Ca2+-binding cytosolic proteins. We developed theoretical models speciﬁcally dedicated to the airway myocyte which include the major mechanisms responsible for intracellular Ca2+ handling identiﬁed in these cells. These biocomputations pointed out the importance of the relative proportion of InsP3 receptor isoforms and the respective role of the different mechanisms responsible for cytosolic Ca2+ clearance in the pattern of [Ca2+]i variations. We have developed a theoretical model of membrane conductances that predicts the variations in membrane potential and extracellular Ca2+ inﬂux. Stimulation of this model by simulated increase in [Ca2+]i predicts membrane depolarisation, but not great enough to trigger a signiﬁcant opening of voltage-dependant Ca2+ channels. This may explain why airway contraction induced by cholinergic stimulation does not greatly depend on extracellular calcium. The development of such models of airway myocytes is important for the understanding of the cellular mechanisms of airway reactivity and their possible modulation by pharmacological agents.
  //
  // The complete original paper reference is cited below:
  //
  // Modelling of calcium handling in airway myocytes (http://www.sciencedirect.com/science?_ob=ArticleURL&_udi=B6TBN-4GBWFDJ-2&_user=140507&_rdoc=1&_fmt=&_orig=search&_sort=d&view=c&_acct=C000011498&_version=1&_urlVersion=0&_userid=140507&md5=fb58937e9ac3f82ee7e81e9b28c139de), Etienne Roux, Penelope J. Noble, Denis Noble and Marko Marhl, 2006, Progress in Biophysics and Molecular Biology (http://www.sciencedirect.com/science/journal/00796107), 15, 556-565. (Full text (http://www.sciencedirect.com/science?_ob=ArticleURL&_udi=B6TBN-4GBWFDJ-2&_user=140507&_rdoc=1&_fmt=&_orig=search&_sort=d&view=c&_acct=C000011498&_version=1&_urlVersion=0&_userid=140507&md5=fb58937e9ac3f82ee7e81e9b28c139de#) and PDF versions of the article are available to journal subscribers on the Progress in Biophysics and Molecular Biology website.) PubMed ID: 15982722 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=15982722&query_hl=1&itool=pubmed_docsum)
  //
  // cell diagram
  //
  // Schematic diagram of the cell model. The model includes L-type voltage-operated Ca2+ current (ICaL), Ca2+-activated Cl- current (IClCa), Ca2+-activated K+ current (IKCa), delayed rectiﬁer K+ current (IKdr), non-speciﬁc cationic current (Icationic), basal currents for Ca2+, Na+ and K+, the plasma membrane Ca2+ ATPase (PMCA) and the Na+-K+ATPase (NKA). Extracellular and intracellular concentrations of Na+, K+, Ca2+ and Cl- are ﬁxed or forced.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_per_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_per_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second;
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_millimolar as
    unit nanoA;
    unit millimolar {expo: -1};
  enddef;
  def unit nanoA_per_millimolar_mole_per_C as
    unit nanoA;
    unit millimolar {expo: -1};
    unit mole;
    unit coulomb {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Cl: millivolt {pub: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Cli: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    E_Na = R*T/F*ln(Nao/Nai);
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai);
    E_K = R*T/F*ln(Ko/Ki);
    E_Cl = R*T/F*ln(Cli/Clo);
  enddef;

  def comp delayed_rectifier_K_current as
    var i_Kdr: nanoA {pub: out};
    var g_Kdr: microS {init: 0.035};
    var gamma_KSS: dimensionless {init: 0.15};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var xa: dimensionless {priv: in};
    var xi1: dimensionless {priv: in};
    var xi2: dimensionless {priv: in};
    i_Kdr = g_Kdr*(gamma_KSS+(xi1+xi2)*(1{dimensionless}-gamma_KSS))*sqr(xa)*(V-E_K);
  enddef;

  def comp delayed_rectifier_K_current_xa_gate as
    var xa: dimensionless {pub: out, init: 0.001};
    var xa_infinity: dimensionless;
    var tau_xa: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(xa, time) = (xa_infinity-xa)/tau_xa;
    xa_infinity = 1{dimensionless}/(1{dimensionless}+exp((5.5{millivolt}-V)/6{millivolt}));
    tau_xa = 0.003262{second}-0.00003552{per_millivolt_second}*V;
  enddef;

  def comp delayed_rectifier_K_current_xi1_gate as
    var xi1: dimensionless {pub: out, init: 0};
    var xi1_infinity: dimensionless;
    var tau_xi1: second {init: 0.25};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(xi1, time) = (xi1_infinity-xi1)/tau_xi1;
    xi1_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+4.3{millivolt})/7.5{millivolt}));
  enddef;

  def comp delayed_rectifier_K_current_xi2_gate as
    var xi2: dimensionless {pub: out, init: 0};
    var xi2_infinity: dimensionless;
    var tau_xi2: second {init: 1.98};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(xi2, time) = (xi2_infinity-xi2)/tau_xi2;
    xi2_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+4.3{millivolt})/7.5{millivolt}));
  enddef;

  def comp L_type_Ca_current as
    var i_CaL: nanoA {pub: out};
    var P_CaL: nanoA_per_millimolar {init: 0.003};
    var V_surf: millivolt {init: 150};
    var ICaL_perm1: dimensionless;
    var ICaL_perm2: millimolar;
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var d: dimensionless {pub: out, priv: in};
    var f: dimensionless {priv: in};
    i_CaL = 4{dimensionless}*P_CaL*d*f*ICaL_perm2;
    ICaL_perm2 = ICaL_perm1*(Cai*exp(V_surf/(0.5{dimensionless}*R*T/F))-Cao*exp(-(V-V_surf)/(0.5{dimensionless}*R*T/F)));
    ICaL_perm1 = (V-V_surf)*F/(R*T*(1{dimensionless}-exp(-(V-V_surf)*2{dimensionless}*F/(R*T))));
  enddef;

  def comp L_type_Ca_current_d_gate as
    var d: dimensionless {pub: out, init: 0};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_d = 30{per_millivolt_per_second}*(V+18{millivolt})/(1{dimensionless}-exp(-0.25{per_millivolt}*(V+18{millivolt})));
    beta_d = 12{per_millivolt_per_second}*(V+18{millivolt})/(exp(0.1{per_millivolt}*(V+18{millivolt}))-1{dimensionless});
    ode(d, time) = alpha_d-(alpha_d+beta_d)*d;
  enddef;

  def comp L_type_Ca_current_f_gate as
    var f: dimensionless {pub: out, init: 1};
    var tau_f: second {init: 0.0173};
    var f_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((23{millivolt}+V)/6.6{millivolt}));
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp Ca_activated_K_current as
    var i_KCa: nanoA {pub: out};
    var g_KCa: microS {init: 2.45};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Cai: millimolar {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in, priv: out};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_mole {pub: in, priv: out};
    var xCa1: dimensionless {priv: in};
    var B: dimensionless {priv: in};
    i_KCa = g_KCa*xCa1*B*(V-E_K);
  enddef;

  def comp Ca_activated_K_current_xCa1_gate as
    var xCa1: dimensionless {pub: out, init: 1};
    var xCa1_infinity: dimensionless;
    var tau_xCa1: second {init: 1};
    var K2: millimolar;
    var K4: millimolar;
    var alpha: per_second {init: 280};
    var beta: per_second {init: 480};
    var V: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var time: second {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(xCa1, time) = (xCa1_infinity-xCa1)/tau_xCa1;
    xCa1_infinity = (sqr(Cai)+K4*Cai)/(sqr(Cai)+K4*Cai*(1{dimensionless}+alpha/beta)+K4*K2*alpha/beta);
    K4 = 0.0000125{millimolar}*exp(-1.99{dimensionless}*V*F/(R*T));
    K2 = 0.000275{millimolar}*exp(-1.51{dimensionless}*V*F/(R*T));
  enddef;

  def comp Ca_activated_K_current_B_gate as
    var B: dimensionless {pub: out, init: 0.001};
    var K1: per_millimolar_per_second;
    var K_1: per_second;
    var V: millivolt {pub: in};
    var xCa1: dimensionless {pub: in};
    var Cai: millimolar {pub: in};
    var time: second {pub: in};
    K1 = 0.85{per_millimolar_per_second}*exp(0.04{per_millivolt}*V);
    K_1 = 0.24{per_second}*exp(-0.012{per_millivolt}*V);
    ode(B, time) = sel
      case Cai >= 0.1{millimolar}:
        K1*Cai*xCa1-K_1*B;
      otherwise:
        1{per_second};
    endsel;
  enddef;

  def comp Ca_activated_Cl_current as
    var i_ClCa: nanoA {pub: out};
    var g_Cl: microS {init: 0.01};
    var CaCT: millimolar {init: 0.0005};
    var h: dimensionless {init: 3};
    var V: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var E_Cl: millivolt {pub: in};
    i_ClCa = g_Cl*(V-E_Cl)*1{dimensionless}/(1{dimensionless}+pow(CaCT/Cai, h));
  enddef;

  def comp nonspecific_cationic_current as
    var i_cationic: nanoA {pub: out};
    var i_nsNa: nanoA;
    var i_nsK: nanoA;
    var i_nsCa: nanoA;
    var P_nsCa: nanoA_per_millimolar_mole_per_C {init: 0.000000175};
    var alpha_Ca: dimensionless;
    var Km_nsCa: millimolar {init: 0.0012};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Nai: millimolar {pub: in, priv: out};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in, priv: out};
    var Ko: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var ns: dimensionless {priv: in};
    i_cationic = i_nsNa+i_nsK+i_nsCa;
    i_nsNa = ns*alpha_Ca*P_nsCa*V*sqr(F)/(R*T)*(0.75{dimensionless}*Nai*exp(V*F/(R*T))-0.75{dimensionless}*Nao)/(exp(V*F/(R*T))-1{dimensionless});
    i_nsK = ns*alpha_Ca*P_nsCa*V*sqr(F)/(R*T)*(0.75{dimensionless}*Ki*exp(V*F/(R*T))-0.75{dimensionless}*Ko)/(exp(V*F/(R*T))-1{dimensionless});
    i_nsCa = ns*alpha_Ca*P_nsCa*4{dimensionless}*V*sqr(F)/(R*T)*(1.5{dimensionless}*Cai*exp(V*F/(R*T))-1.5{dimensionless}*Cao)/(exp(V*F/(R*T))-1{dimensionless});
    alpha_Ca = 1{dimensionless}/(1{dimensionless}+pow(Km_nsCa/Cai, 3{dimensionless}));
  enddef;

  def comp nonspecific_cationic_current_ns_gate as
    var ns: dimensionless {pub: out, init: 1};
    var tau_ns: second;
    var ns_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ns_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-69.8{millivolt})/(-11.9{millivolt})));
    ode(ns, time) = (ns_infinity-ns)/tau_ns;
    tau_ns = 0.20025{second}-0.00089875{per_millivolt_second}*V;
  enddef;

  def comp Ca_pump_current as
    var i_pCa: nanoA {pub: out};
    var i_pCamax: nanoA {init: 1.15};
    var Kmp_Ca: millimolar {init: 0.05};
    var Cai: millimolar {pub: in};
    i_pCa = i_pCamax*Cai/(Kmp_Ca+Cai);
  enddef;

  def comp Na_K_pump_current as
    var i_NaK: nanoA {pub: out};
    var i_NaKmax: nanoA {init: 0.7};
    var Km_Na: millimolar {init: 40};
    var Km_K: millimolar {init: 1};
    var V: millivolt {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    i_NaK = i_NaKmax*Ko/(Ko+Km_K)*Nai/(Nai+Km_Na);
  enddef;

  def comp Ca_background_current as
    var i_bCa: nanoA {pub: out};
    var g_bCa: microS {init: 1.194e-5};
    var V: millivolt {pub: in};
    var E_Ca: millivolt {pub: in};
    i_bCa = g_bCa*(V-E_Ca);
  enddef;

  def comp K_background_current as
    var i_bK: nanoA {pub: out};
    var g_bK: microS {init: 0.008729};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    i_bK = g_bK*(V-E_K);
  enddef;

  def comp Na_background_current as
    var i_bNa: nanoA {pub: out};
    var g_bNa: microS {init: 0.003263};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_bNa = g_bNa*(V-E_Na);
  enddef;

  def comp membrane as
    var V: millivolt {pub: out, init: -60};
    var cap: microF {init: 0.00002};
    var time: second {pub: in};
    var i_CaL: nanoA {pub: in};
    var i_Kdr: nanoA {pub: in};
    var i_KCa: nanoA {pub: in};
    var i_ClCa: nanoA {pub: in};
    var i_cationic: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_pCa: nanoA {pub: in};
    var i_bCa: nanoA {pub: in};
    var i_bK: nanoA {pub: in};
    var i_bNa: nanoA {pub: in};
    ode(V, time) = -1{dimensionless}/cap*(i_CaL+i_Kdr+i_KCa+i_ClCa+i_cationic+i_NaK+i_pCa+i_bCa+i_bK+i_bNa);
  enddef;

  def comp model_parameters as
    var R: millijoule_per_mole_kelvin {pub: out, init: 8314.472};
    var T: kelvin {pub: out, init: 310};
    var F: coulomb_per_mole {pub: out, init: 96485.3415};
    var Nai: millimolar {pub: out, init: 12};
    var Nao: millimolar {pub: out, init: 130};
    var Cai: millimolar {pub: out};
    var Cao: millimolar {pub: out, init: 2};
    var Ki: millimolar {pub: out, init: 150};
    var Ko: millimolar {pub: out, init: 5};
    var Cli: millimolar {pub: out, init: 55};
    var Clo: millimolar {pub: out, init: 140};
    var upeak: millimolar;
    var up: millimolar;
    var peak: millimolar;
    var plat: millimolar;
    var A: millimolar {init: 0.0008};
    var B: millimolar {init: 0.00008};
    var C: millimolar {init: 0.00012};
    var x0: second;
    var x1: second {init: 15};
    var x2: second {init: 0.8};
    var ds: second {init: 30};
    var p: second {init: 0.4};
    var n: second {init: 0.2};
    var t36: second {init: 1.5};
    var time: second {pub: in};
    Cai = C+upeak+peak+plat;
    upeak = sel
      case time < x1+x2:
        up;
      otherwise:
        0{millimolar};
    endsel;
    up = sel
      case time < x1:
        0{millimolar};
      otherwise:
        (time-x1)*A/x2;
    endsel;
    peak = sel
      case time < x0:
        0{millimolar};
      otherwise:
        A*exp(-(time-x0)/t36);
    endsel;
    x0 = x1+x2;
    plat = B/(1{dimensionless}+exp((time-(x1+p+ds))/n))-B/(1{dimensionless}+exp((time-(x1+p))/n));
  enddef;

  def group as containment for
    comp membrane incl
      comp L_type_Ca_current incl
        comp L_type_Ca_current_d_gate;
        comp L_type_Ca_current_f_gate;
      endcomp;
      comp delayed_rectifier_K_current incl
        comp delayed_rectifier_K_current_xa_gate;
        comp delayed_rectifier_K_current_xi1_gate;
        comp delayed_rectifier_K_current_xi2_gate;
      endcomp;
      comp Ca_activated_K_current incl
        comp Ca_activated_K_current_xCa1_gate;
        comp Ca_activated_K_current_B_gate;
      endcomp;
      comp nonspecific_cationic_current incl
        comp nonspecific_cationic_current_ns_gate;
      endcomp;
      comp Ca_activated_Cl_current;
      comp Na_K_pump_current;
      comp Ca_pump_current;
      comp Na_background_current;
      comp Ca_background_current;
      comp K_background_current;
    endcomp;
  enddef;

  def group as encapsulation for
    comp L_type_Ca_current incl
      comp L_type_Ca_current_d_gate;
      comp L_type_Ca_current_f_gate;
    endcomp;
    comp delayed_rectifier_K_current incl
      comp delayed_rectifier_K_current_xa_gate;
      comp delayed_rectifier_K_current_xi1_gate;
      comp delayed_rectifier_K_current_xi2_gate;
    endcomp;
    comp Ca_activated_K_current incl
      comp Ca_activated_K_current_xCa1_gate;
      comp Ca_activated_K_current_B_gate;
    endcomp;
    comp nonspecific_cationic_current incl
      comp nonspecific_cationic_current_ns_gate;
    endcomp;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between model_parameters and environment for
    vars time and time;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between Ca_activated_K_current and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_current and environment for
    vars time and time;
  enddef;
  def map between nonspecific_cationic_current and environment for
    vars time and time;
  enddef;
  def map between membrane and delayed_rectifier_K_current for
    vars V and V;
    vars i_Kdr and i_Kdr;
  enddef;
  def map between membrane and L_type_Ca_current for
    vars V and V;
    vars i_CaL and i_CaL;
  enddef;
  def map between membrane and Ca_activated_K_current for
    vars V and V;
    vars i_KCa and i_KCa;
  enddef;
  def map between membrane and Ca_activated_Cl_current for
    vars V and V;
    vars i_ClCa and i_ClCa;
  enddef;
  def map between membrane and nonspecific_cationic_current for
    vars V and V;
    vars i_cationic and i_cationic;
  enddef;
  def map between membrane and Na_K_pump_current for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and K_background_current for
    vars V and V;
    vars i_bK and i_bK;
  enddef;
  def map between membrane and Na_background_current for
    vars V and V;
    vars i_bNa and i_bNa;
  enddef;
  def map between membrane and Ca_background_current for
    vars V and V;
    vars i_bCa and i_bCa;
  enddef;
  def map between membrane and Ca_pump_current for
    vars i_pCa and i_pCa;
  enddef;
  def map between reversal_potentials and delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and Ca_activated_K_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and K_background_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and Na_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and Ca_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and Ca_activated_Cl_current for
    vars E_Cl and E_Cl;
  enddef;
  def map between model_parameters and reversal_potentials for
    vars Nao and Nao;
    vars Cao and Cao;
    vars Ko and Ko;
    vars Clo and Clo;
    vars Nai and Nai;
    vars Cai and Cai;
    vars Ki and Ki;
    vars Cli and Cli;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and L_type_Ca_current for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
    vars Cai and Cai;
  enddef;
  def map between model_parameters and Ca_activated_K_current for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cai and Cai;
  enddef;
  def map between model_parameters and Ca_activated_Cl_current for
    vars Cai and Cai;
  enddef;
  def map between model_parameters and nonspecific_cationic_current for
    vars Nao and Nao;
    vars Cao and Cao;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Cai and Cai;
    vars Ki and Ki;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and Ca_pump_current for
    vars Cai and Cai;
  enddef;
  def map between model_parameters and Na_K_pump_current for
    vars Ko and Ko;
    vars Nai and Nai;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_xa_gate for
    vars xa and xa;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_xi1_gate for
    vars xi1 and xi1;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_xi2_gate for
    vars xi2 and xi2;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_activated_K_current and Ca_activated_K_current_xCa1_gate for
    vars xCa1 and xCa1;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between Ca_activated_K_current and Ca_activated_K_current_B_gate for
    vars B and B;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
  enddef;
  def map between Ca_activated_K_current_B_gate and Ca_activated_K_current_xCa1_gate for
    vars xCa1 and xCa1;
  enddef;
  def map between nonspecific_cationic_current and nonspecific_cationic_current_ns_gate for
    vars ns and ns;
    vars time and time;
    vars V and V;
  enddef;
enddef;
