//   FILE :  fridlyand_model_2003.xml
//
// CREATED :  14th November 2002
//
// LAST MODIFIED : 14th November 2003
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of Fridlyand et al's 2003 mathematical model of Ca2+ fluxes in pancreatic beta-cells.
//
// CHANGES:
def model fridlyand_tamarina_philipson_2003_version01 as
  // Modelling Ca2+ Flux in Pancreatic Beta-cells
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original unchecked version of the model imported from the previous CellML model repository, 24-Jan-2006.
  //
  // Model Structure
  //
  // An increase in the concentration of intracellular free calcium ([Ca2+]i) is an essential signal for the initiation of insulin secretion in pancreatic beta-cells. This increase is primarily due to the opening of Ca2+ channels in the plasma membrane in response to glucose. Glucose metabolism leads to an increase in the cytosolic ATP:ADP ratio, which in turn causes the ATP-sensitive potassium channels to close. The beta-cell membrane becomes depolarised, Ca2+ channels open, and Ca2+ enters the cell. These events underlie the glucose-induced electrical activity, which in pancreatic islets, consists of Ca2+-dependent action potentials.
  //
  // There is an abundance of literature that describes beta-cell electrical activity and its relationship to [Ca2+]i. Complex and cyclic spike-burst activity, and corresponding [Ca2+]i oscillations in pancreatic islets and beta-cell clusters are induced in response to a rise in extracellular glucose concentration. Intermediate glucose concentrations induce both fast and slow oscillations. The authors of this current study: Fridlyand, Tamarina and Philipson, have previously studied slow and fast [Ca2+]i oscillations in islets in response to a variety of conditions. However, the experimental results were complex, and precise understanding was limited by the large number of channels and pumps in the beta-cell plasma membrane that were simultaneously working.
  //
  // In order to better understand the molecular mechanisms underlying this behaviour, in this publication Fridlyand et al. have developed a mathematical model of the Ca2+ fluxes in pancreatic beta-cells. Several other mathematical models of glucose-induced insulin secretion, with corresponding descriptions of glucose transport, metabolism and ion regulation, have been published. These include:
  //
  // Extracellular and Intracellular Calcium Effects on Pancreatic Beta Cells, Chay, 1997 (${HTML_EXMPL_CHAY_MODEL97});
  //
  // Na+/Ca2+ Exchange in Models for Pancreatic Beta-Cells, Gall and Susa, 1999 (${HTML_EXMPL_GALL_MODEL}); and
  //
  // The Phantom Burster Model for Pancreatic Beta-Cells, Bertram et al., 2000 (${HTML_EXMPL_BERTRAM_MODEL}).
  //
  // However, most of these models are focused on describing one specific phenomenon. They only include a very limited set of channels and pumps, and therefore it is difficult to apply them to a another situation. In addition, since their publication, new experimental data has become available, and these new findings should be included in a theoretical model. For this reason Fridlyand et al. have developed the new mathematical model described here (see the raw CellML description of the Fridlyand et al. 2003 model in ). They have adopted the more complex style of modelling that has previously been used successfully to describe the electrophysiology of cardiac myocytes and other cell types (for example in Human Atrial Cell Model, Nygren et al. 1998 (${HTML_EXMPL_NYGREN_ATRIAL_MODEL}) and in Modelling Interval-Force Relations in Cardiac Muscle, Rice et al., 2000 (${HTML_EXMPL_RICE_MODEL2})).
  //
  // Their new model includes a wider range of channels and pumps, as well as endoplasmic reticulum (ER) Ca2+ sequestration mechanisms (see below). Using this model they were able to simulate whole cell electrical activity and [Ca2+]i, free calcium in the ER ([Ca2+]ER), intracellular Na + ([Na+]i), cytosolic ATP ([ATP]i), and inositol triphosphate ([IP3]i) concentrations. However, they acknowledge that this model does not consider metabolic processes or insulin secretion.
  //
  // The complete original paper reference is cited below:
  //
  // Modeling of Ca2+ flux in pancreatic beta-cells: role of the plasma membrane and intracellular stores (http://ajpendo.physiology.org/cgi/content/abstract/285/1/E138), Leonid E. Fridlyand, Natalia Tamarina, and Louis H. Philipson, 2003, American Journal of Physiology (http://ajpendo.physiology.org/), 285, E138-E154. (Full text (HTML) (http://ajpendo.physiology.org/cgi/content/full/285/1/E138) and PDF (http://ajpendo.physiology.org/cgi/reprint/285/1/E138.pdf) versions of the article are available on the American Jounal of Physiology website.) PubMed ID: 12644446 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12644446&dopt=Abstract)
  //
  // cell diagram
  //
  // Schematic representation of currents and ion fluxes, through the plasma membrane and the endoplasmic reticulum membrane, which have been included in the whole beta-cell mathematical model.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit first_order_rate_constant as
    unit millisecond {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit third_order_rate_constant as
    unit micromolar {expo: -2};
    unit millisecond {expo: -1};
  enddef;
  def unit forth_order_rate_constant as
    unit micromolar {expo: -3};
    unit millisecond {expo: -1};
  enddef;
  def unit flux as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit picoS_per_millivolt as
    unit picoS;
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit picoS as
    unit siemens {pref: pico};
  enddef;
  def unit picol as
    unit litre {pref: pico};
  enddef;
  def unit picol_per_ms as
    unit picol;
    unit millisecond {expo: -1};
  enddef;
  def unit femtoA as
    unit ampere {pref: femto};
  enddef;
  def unit femtoF as
    unit farad {pref: femto};
  enddef;
  def unit millimolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0042391
  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp membrane as
    var V: millivolt {init: -84.624, pub: out};
    var Cm: femtoF {init: 6158.0};
    var time: millisecond {pub: in};
    var i_VCa: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var i_Ca_pump: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005227
    var i_CRAN: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    var i_NaK: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_KDr: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var i_KCa: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var i_KATP: femtoA {pub: in};
    ode(V, time) = (i_VCa+i_Ca_pump+i_NaCa+i_CRAN+i_Na+i_NaK+i_KDr+i_KCa+i_KATP)/(-Cm);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp whole_cell_calcium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_VCa: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var V_Ca: millivolt;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var gm_VCa: picoS {init: 770.0};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var p_VCa: dimensionless {priv: in};
    i_VCa = gm_VCa*p_VCa*(V-V_Ca);
    V_Ca = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp whole_cell_calcium_current_p_VCa_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var p_VCa: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var V_Cah: millivolt {init: -19.0};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var K_Cah: millivolt {init: 9.5};
    var V: millivolt {pub: in};
    p_VCa = 1.0{dimensionless}/(1.0{dimensionless}+exp((V_Cah-V)/K_Cah));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0070588
  // isVersionOf: http://identifiers.org/go/GO:0015085
  // isVersionOf: http://identifiers.org/go/GO:0006816
  def comp PM_calcium_pumps as
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var i_Ca_pump: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var Pm_Cap: femtoA {init: 2000.0};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var K_Cap: micromolar {init: 0.1};
    var Cai: micromolar {pub: in};
    i_Ca_pump = Pm_Cap*(sqr(Cai)/(sqr(K_Cap)+sqr(Cai)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp sodium_calcium_exchanger as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var V_NaCa: millivolt;
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var g_NaCa: picoS {init: 271.0};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var K_NaCa: micromolar {init: 0.75};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Cai: micromolar {pub: in};
    var Cao: micromolar {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    i_NaCa = g_NaCa*(pow(Cai, 5.0{dimensionless})/(pow(Cai, 5.0{dimensionless})+pow(K_NaCa, 5.0{dimensionless})))*(V-V_NaCa);
    V_NaCa = R*T/F*(3.0{dimensionless}*ln(Nao/Nai)-ln(Cao/Cai));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005227
  def comp nonselective_cation_current as
    // isVersionOf: http://identifiers.org/go/GO:0005227
    var i_CRAN: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005227
    var V_CRAN: millivolt {init: 0.0};
    // isVersionOf: http://identifiers.org/go/GO:0005227
    var gm_CRAN: picoS_per_millivolt {init: 0.7};
    // isVersionOf: http://identifiers.org/go/GO:0005227
    var K_Car: micromolar {init: 200.0};
    // isVersionOf: http://identifiers.org/go/GO:0005227
    var f_CRAN: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005227
    var P_CRAN: millivolt;
    var V: millivolt {pub: in};
    var V_Na: millivolt {pub: in};
    var CaER: micromolar {pub: in};
    i_CRAN = f_CRAN*P_CRAN*(V-V_Na);
    f_CRAN = -gm_CRAN/(1.0{dimensionless}+exp((CaER-K_Car)/3.0{dimensionless}));
    P_CRAN = V-V_CRAN;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var V_Na: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var gm_Na: picoS {init: 1200.0};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var p_Na: dimensionless {priv: in};
    i_Na = gm_Na*p_Na*(V-V_Na);
    V_Na = R*T/F*ln(Nao/Nai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp sodium_current_p_Na_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var p_Na: dimensionless {pub: out};
    var V: millivolt {pub: in};
    p_Na = 1.0{dimensionless}/(1.0{dimensionless}+exp((104.0{millivolt}+V)/8.0{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005391
  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0006815
  def comp sodium_potassium_active_transport as
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var P_NaK: femtoA {init: 600.0};
    var P: micromolar {init: 4950.0};
    var K_supi: micromolar;
    var F1: first_order_rate_constant;
    var F4: first_order_rate_constant;
    var F5: first_order_rate_constant;
    var f1: forth_order_rate_constant {init: 2.5E-10};
    var f2: first_order_rate_constant {init: 10.0};
    var f3: first_order_rate_constant {init: 0.172};
    var f4: third_order_rate_constant {init: 1.5E-8};
    var f5_: second_order_rate_constant {init: 0.002};
    var f5: second_order_rate_constant;
    var f6: first_order_rate_constant {init: 11.5};
    var b1: first_order_rate_constant {init: 100.0};
    var b2: second_order_rate_constant {init: 0.0001};
    var b3: forth_order_rate_constant {init: 1.72E-17};
    var b4: second_order_rate_constant {init: 0.0002};
    var b5_: first_order_rate_constant {init: 0.03};
    var b5: first_order_rate_constant;
    var b6: second_order_rate_constant {init: 6.0E-7};
    var B2: first_order_rate_constant;
    var B3: first_order_rate_constant;
    var B4: first_order_rate_constant;
    var B6: first_order_rate_constant;
    var D: dimensionless;
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Nai: micromolar {pub: in};
    var Nao: micromolar {pub: in};
    var ATPi: micromolar {pub: in};
    var ADPi: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    i_NaK = P_NaK*((F1*f2*f3*F4*F5*f6-b1*B2*B3*B4*b5*B6)/D);
    D = f2*f3*F4*F5*f6+b1*f3*F4*F5*f6+b1*B2*F4*F5*f6+b1*B2*B3*F5*f6+b1*B2*B3*B4*f6+b1*B2*B3*B4*b5;
    F1 = f1*pow(Nai, 3.0{dimensionless});
    F4 = f4*sqr(Ko);
    F5 = f5*ATPi;
    f5 = f5_*exp(V*F/(2.0{dimensionless}*R*T));
    B2 = b2*ATPi;
    B3 = b3*pow(Nai, 3.0{dimensionless});
    B4 = b4*P;
    B6 = b6*sqr(K_supi);
    b5 = b5_*exp(-(V*F)/(2.0{dimensionless}*R*T));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp voltage_dependent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_KDr: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var V_K: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var gm_KDr: picoS {init: 3000.0};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Ki: micromolar {pub: in};
    var Ko: micromolar {pub: in};
    var n: dimensionless {priv: in};
    i_KDr = gm_KDr*n*(V-V_K);
    V_K = R*T/F*ln(Ko/Ki);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp voltage_dependent_potassium_current_n_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var n: dimensionless {init: 0.00123, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var tau_n: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var n_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var Vn: millivolt {init: -14.0};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var Vtau: millivolt {init: -75.0};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var Sn: millivolt {init: 7.0};
    var a: millivolt {init: 65.0};
    var b: millivolt {init: 20.0};
    var c: millisecond {init: 20.0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(n, time) = (n_infinity-n)/tau_n;
    n_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vn-V)/Sn));
    tau_n = c/(exp((V-Vtau)/a)+exp((Vtau-V)/b));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0015269
  def comp calcium_dependent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var i_KCa: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var gm_KCa: picoS {init: 130.0};
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var V_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var Cai: micromolar {priv: out, pub: in};
    var fCa: dimensionless {priv: in};
    i_KCa = gm_KCa*fCa*(V-V_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0015269
  def comp calcium_dependent_potassium_current_fCa_gate as
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var fCa: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0015269
    var K_KCa: micromolar {init: 0.1};
    var Cai: micromolar {pub: in};
    fCa = pow(Cai, 4.0{dimensionless})/(pow(Cai, 4.0{dimensionless})+pow(K_KCa, 4.0{dimensionless}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0008282
  def comp ATP_dependent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var i_KATP: femtoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var gm_KATP: picoS {init: 24000.0};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0008282
    var O_KATP: dimensionless;
    var Kdd: micromolar {init: 17.0};
    var Ktd: micromolar {init: 26.0};
    var Ktt: micromolar {init: 1.0};
    var V: millivolt {pub: in};
    var V_K: millivolt {pub: in};
    var ADPi: micromolar {pub: in};
    var ATPi: micromolar {pub: in};
    i_KATP = gm_KATP*O_KATP*(V-V_K);
    O_KATP = (0.08{dimensionless}*(1.0{dimensionless}+0.33{dimensionless}*ADPi/Kdd)+0.89{dimensionless}*sqr(0.165{dimensionless}+ADPi/Kdd))/(sqr(0.165{dimensionless}+ADPi/Kdd)*(1.0{dimensionless}+0.135{dimensionless}*ADPi/Ktd+0.05{dimensionless}*ATPi/Ktt));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0051208
  // isVersionOf: http://identifiers.org/go/GO:0070296
  def comp SERCA_pump as
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var Jer_p: flux {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var P_CaER: flux {init: 0.105};
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var K_Carp: micromolar {init: 0.5};
    var Cai: micromolar {pub: in};
    Jer_p = P_CaER*(sqr(Cai)/(sqr(Cai)+sqr(K_Carp)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005220
  def comp IP3_metabolism as
    // isVersionOf: http://identifiers.org/go/GO:0005220
    var IP3i: micromolar {init: 0.33, pub: out};
    var kIP: flux {init: 0.0003};
    var kdIP: first_order_rate_constant {init: 0.00004};
    // isVersionOf: http://identifiers.org/go/GO:0005220
    var K_IPCa: micromolar {init: 0.4};
    var Cai: micromolar {pub: in};
    var time: millisecond {pub: in};
    ode(IP3i, time) = kIP*(sqr(Cai)/(sqr(Cai)+sqr(K_IPCa)))-kdIP*IP3i;
  enddef;

  def comp CaER_mobilisation as
    var J_out: flux {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var P_leak: picol_per_ms {init: 0.0001};
    // isVersionOf: http://identifiers.org/go/GO:0005220
    var P_IP3: picol_per_ms {init: 0.0012};
    var O_infinity: dimensionless;
    var K_RCa: micromolar {init: 3.2};
    // isVersionOf: http://identifiers.org/go/GO:0005220
    var K_IP3: micromolar {init: 0.077};
    // isVersionOf: http://identifiers.org/go/GO:0005220
    var IP3i: micromolar {pub: in};
    var Cai: micromolar {pub: in};
    var CaER: micromolar {pub: in};
    J_out = (P_leak+P_IP3*O_infinity)*(CaER-Cai);
    O_infinity = Cai/(Cai+K_RCa)*(pow(IP3i, 3.0{dimensionless})/(pow(IP3i, 3.0{dimensionless})+pow(K_IP3, 3.0{dimensionless})));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp calcium_and_sodium_dynamics as
    var Cai: micromolar {init: 0.085, pub: out};
    var CaER: micromolar {init: 22.8, pub: out};
    var Nai: micromolar {init: 9858.0, pub: out};
    var fi: dimensionless {init: 0.01};
    var fer: dimensionless {init: 0.03};
    var ksg: first_order_rate_constant {init: 0.0001};
    var Ver: picol {init: 0.280};
    var Vi: picol {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_VCa: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: femtoA {pub: in};
    var i_Ca_pump: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    var i_NaK: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005227
    var i_CRAN: femtoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var J_out: flux {pub: in};
    var Jer_p: flux {pub: in};
    var time: millisecond {pub: in};
    ode(Cai, time) = fi*((-i_VCa+i_NaCa*2.0{dimensionless}-i_Ca_pump*2.0{dimensionless})/(2.0{dimensionless}*F*Vi)-Jer_p+J_out/Vi)-ksg*Cai;
    ode(CaER, time) = fer/Ver*(Jer_p*Vi-J_out);
    ode(Nai, time) = -(3.0{dimensionless}*i_NaCa+3.0{dimensionless}*i_NaK+i_Na+i_CRAN)/(Vi*F);
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
  def comp ATP_homeostasis as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATPi: micromolar {init: 932.1, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADPi: millimolar {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var k_ADP: first_order_rate_constant;
    // isVersionOf: http://identifiers.org/go/GO:0008282
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var k_ATP: first_order_rate_constant {init: 0.00005};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var k_ATP_Ca: second_order_rate_constant {init: 0.00005};
    var Ao: micromolar {init: 4000.0};
    var Vi: picol {pub: in};
    var Cai: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0006816
    var i_Ca_pump: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005227
    var i_CRAN: femtoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: femtoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Jer_p: flux {pub: in};
    var time: millisecond {pub: in};
    ode(ATPi, time) = k_ADP*ADPi-((i_NaK+i_CRAN)/(Vi*F)+Jer_p/2.0{dimensionless}+(k_ATP_Ca*Cai+k_ATP)*ATPi);
    ADPi = Ao-ATPi;
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
  // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  def comp cell_and_external_parameters as
    var Cao: millimolar {init: 2.6, pub: out};
    var Nao: millimolar {init: 140.0, pub: out};
    var Ko: millimolar {init: 8.0, pub: out};
    var Ki: millimolar {init: 132.4, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.0, pub: out};
    var T: kelvin {init: 310.0, pub: out};
    var F: coulomb_per_mole {init: 96500.0, pub: out};
    var Vi: picol {init: 0.764, pub: out};
  enddef;

  def group as containment for
    comp membrane incl
      comp whole_cell_calcium_current incl
        comp whole_cell_calcium_current_p_VCa_gate;
      endcomp;
      comp PM_calcium_pumps;
      comp sodium_calcium_exchanger;
      comp nonselective_cation_current;
      comp sodium_current incl
        comp sodium_current_p_Na_gate;
      endcomp;
      comp voltage_dependent_potassium_current incl
        comp voltage_dependent_potassium_current_n_gate;
      endcomp;
      comp calcium_dependent_potassium_current incl
        comp calcium_dependent_potassium_current_fCa_gate;
      endcomp;
      comp sodium_potassium_active_transport;
      comp ATP_dependent_potassium_current;
      comp SERCA_pump;
      comp IP3_metabolism;
      comp CaER_mobilisation;
      comp calcium_and_sodium_dynamics;
      comp ATP_homeostasis;
      comp cell_and_external_parameters;
    endcomp;
  enddef;

  def group as encapsulation for
    comp whole_cell_calcium_current incl
      comp whole_cell_calcium_current_p_VCa_gate;
    endcomp;
    comp sodium_current incl
      comp sodium_current_p_Na_gate;
    endcomp;
    comp voltage_dependent_potassium_current incl
      comp voltage_dependent_potassium_current_n_gate;
    endcomp;
    comp calcium_dependent_potassium_current incl
      comp calcium_dependent_potassium_current_fCa_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between IP3_metabolism and environment for
    vars time and time;
  enddef;
  def map between calcium_and_sodium_dynamics and environment for
    vars time and time;
  enddef;
  def map between ATP_homeostasis and environment for
    vars time and time;
  enddef;
  def map between voltage_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between membrane and whole_cell_calcium_current for
    vars i_VCa and i_VCa;
    vars V and V;
  enddef;
  def map between membrane and PM_calcium_pumps for
    vars i_Ca_pump and i_Ca_pump;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars i_NaCa and i_NaCa;
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_active_transport for
    vars i_NaK and i_NaK;
    vars V and V;
  enddef;
  def map between membrane and nonselective_cation_current for
    vars i_CRAN and i_CRAN;
    vars V and V;
  enddef;
  def map between membrane and sodium_current for
    vars i_Na and i_Na;
    vars V and V;
  enddef;
  def map between membrane and voltage_dependent_potassium_current for
    vars i_KDr and i_KDr;
    vars V and V;
  enddef;
  def map between membrane and calcium_dependent_potassium_current for
    vars i_KCa and i_KCa;
    vars V and V;
  enddef;
  def map between membrane and ATP_dependent_potassium_current for
    vars i_KATP and i_KATP;
    vars V and V;
  enddef;
  def map between calcium_and_sodium_dynamics and whole_cell_calcium_current for
    vars Cai and Cai;
    vars i_VCa and i_VCa;
  enddef;
  def map between calcium_and_sodium_dynamics and PM_calcium_pumps for
    vars Cai and Cai;
    vars i_Ca_pump and i_Ca_pump;
  enddef;
  def map between calcium_and_sodium_dynamics and sodium_calcium_exchanger for
    vars Cai and Cai;
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between calcium_and_sodium_dynamics and sodium_potassium_active_transport for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between calcium_and_sodium_dynamics and nonselective_cation_current for
    vars CaER and CaER;
    vars i_CRAN and i_CRAN;
  enddef;
  def map between calcium_and_sodium_dynamics and sodium_current for
    vars Nai and Nai;
    vars i_Na and i_Na;
  enddef;
  def map between calcium_and_sodium_dynamics and calcium_dependent_potassium_current for
    vars Cai and Cai;
  enddef;
  def map between calcium_and_sodium_dynamics and SERCA_pump for
    vars Cai and Cai;
    vars Jer_p and Jer_p;
  enddef;
  def map between calcium_and_sodium_dynamics and IP3_metabolism for
    vars Cai and Cai;
  enddef;
  def map between calcium_and_sodium_dynamics and CaER_mobilisation for
    vars CaER and CaER;
    vars Cai and Cai;
    vars J_out and J_out;
  enddef;
  def map between calcium_and_sodium_dynamics and ATP_homeostasis for
    vars Cai and Cai;
  enddef;
  def map between cell_and_external_parameters and whole_cell_calcium_current for
    vars Cao and Cao;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell_and_external_parameters and sodium_calcium_exchanger for
    vars Cao and Cao;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell_and_external_parameters and sodium_potassium_active_transport for
    vars Ko and Ko;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell_and_external_parameters and sodium_current for
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell_and_external_parameters and voltage_dependent_potassium_current for
    vars Ko and Ko;
    vars Ki and Ki;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between cell_and_external_parameters and calcium_and_sodium_dynamics for
    vars F and F;
    vars Vi and Vi;
  enddef;
  def map between cell_and_external_parameters and ATP_homeostasis for
    vars F and F;
    vars Vi and Vi;
  enddef;
  def map between nonselective_cation_current and sodium_current for
    vars V_Na and V_Na;
  enddef;
  def map between voltage_dependent_potassium_current and calcium_dependent_potassium_current for
    vars V_K and V_K;
  enddef;
  def map between voltage_dependent_potassium_current and ATP_dependent_potassium_current for
    vars V_K and V_K;
  enddef;
  def map between IP3_metabolism and CaER_mobilisation for
    vars IP3i and IP3i;
  enddef;
  def map between ATP_homeostasis and PM_calcium_pumps for
    vars i_Ca_pump and i_Ca_pump;
  enddef;
  def map between ATP_homeostasis and sodium_potassium_active_transport for
    vars i_NaK and i_NaK;
    vars ATPi and ATPi;
    vars ADPi and ADPi;
  enddef;
  def map between ATP_homeostasis and SERCA_pump for
    vars Jer_p and Jer_p;
  enddef;
  def map between ATP_homeostasis and ATP_dependent_potassium_current for
    vars ATPi and ATPi;
    vars ADPi and ADPi;
  enddef;
  def map between ATP_homeostasis and nonselective_cation_current for
    vars i_CRAN and i_CRAN;
  enddef;
  def map between whole_cell_calcium_current and whole_cell_calcium_current_p_VCa_gate for
    vars p_VCa and p_VCa;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_p_Na_gate for
    vars p_Na and p_Na;
    vars V and V;
  enddef;
  def map between voltage_dependent_potassium_current and voltage_dependent_potassium_current_n_gate for
    vars n and n;
    vars time and time;
    vars V and V;
  enddef;
  def map between calcium_dependent_potassium_current and calcium_dependent_potassium_current_fCa_gate for
    vars fCa and fCa;
    vars Cai and Cai;
  enddef;
enddef;
