<?xml version="1.0"?>
<!--
This CellML file was generated on 11/05/2010 at 12:35:43 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xml:base="file:///H:/stern_song_sham_yang_boheler_rios_1999/stern_song_sham_yang_boheler_rios_1999.cellml" cmeta:id="stern_1999" name="stern_1999">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Ryanodine Receptor Gating Kinetics in Cardiac Muscle</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
				</articleinfo>
				<section id="sec_status">
                  <title>Model Status</title>
					<para>
            This model runs in OpenCell and COR, and the units are consistent throughout. The current model only describes a single RyR gating scheme, while the paper tests different gating schemes coupled with other dyadic components to recreate ion flows. As these are not described in great depth, this model is likely to remain incomplete and unable to recreate published results. Initial conditions used here are guesses. 
          </para>
				</section>
  <sect1 id="sec_structure">
<title>Model Structure</title>
				<para>
ABSTRACT: In cardiac muscle, release of activator calcium from the sarcoplasmic reticulum occurs by calcium-induced calcium release through ryanodine receptors (RyRs), which are clustered in a dense, regular, two-dimensional lattice array at the diad junction. We simulated numerically the stochastic dynamics of RyRs and L-type sarcolemmal calcium channels interacting via calcium nano-domains in the junctional cleft. Four putative RyR gating schemes based on single-channel measurements in lipid bilayers all failed to give stable excitation-contraction coupling, due either to insufficiently strong inactivation to terminate locally regenerative calcium-induced calcium release or insufficient cooperativity to discriminate against RyR activation by background calcium. If the ryanodine receptor was represented, instead, by a phenomenological four-state gating scheme, with channel opening resulting from simultaneous binding of two Ca2+ ions, and either calcium-dependent or activation-linked inactivation, the simulations gave a good semiquantitative accounting for the macroscopic features of excitation-contraction coupling. It was possible to restore stability to a model based on a bilayer-derived gating scheme, by introducing allosteric interactions between nearest-neighbor RyRs so as to stabilize the inactivated state and produce cooperativity among calcium binding sites on different RyRs. Such allosteric coupling between RyRs may be a function of the foot process and lattice array, explaining their conservation during evolution.
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Local Control Models of Cardiac Excitation-Contraction Coupling <emphasis>A Possible Role for Allosteric Interactions between Ryanodine Receptors</emphasis>, Michael D. Stern, Long-Sheng Song, Heping Cheng, James S.K. Sham, Huang Tian Yang, Kenneth R. Boheler and Eduardo Rios, 1999, <emphasis>The Journal Of General Physiology</emphasis>, 113, 469-489.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10051521&amp;dopt=Abstract">PubMed ID: 10051521</ulink>
				</para>
				
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>Schematic diagram of the RyR models</title>
							</objectinfo>
							<imagedata fileref="stern_1999.png"/>
						</imageobject>
					</mediaobject>
					<caption>RyR gating scheme.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millimolar">
      <unit prefix="milli" units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millisecond">
      <unit prefix="milli" units="second"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="first_order_rate_constant">
      <unit exponent="-1" units="millisecond"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="second_order_rate_constant">
      <unit exponent="-1" units="millimolar"/>
      <unit exponent="-1" units="millisecond"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="third_order_rate_constant">
      <unit exponent="-2" units="millimolar"/>
      <unit exponent="-1" units="millisecond"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" public_interface="out" units="millisecond"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="R">
      <variable initial_value="1" name="R" public_interface="out" units="dimensionless"/>
      <variable cmeta:id="id_00014" name="ki" public_interface="in" units="second_order_rate_constant"/>
      <variable cmeta:id="id_00013" name="ko" public_interface="in" units="third_order_rate_constant"/>
      <variable name="kim" public_interface="in" units="first_order_rate_constant"/>
      <variable name="kom" public_interface="in" units="first_order_rate_constant"/>
      <variable name="RI" public_interface="in" units="dimensionless"/>
      <variable name="O" public_interface="in" units="dimensionless"/>
      <variable cmeta:id="id_00006" name="Ca" public_interface="in" units="millimolar"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>R</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>kom</ci>
                     <ci>O</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kim</ci>
                     <ci>RI</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>ko</ci>
                     <apply>
                        <power/>
                        <ci>Ca</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                     <ci>R</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>ki</ci>
                     <ci>Ca</ci>
                     <ci>R</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="O">
      <variable initial_value="1" name="O" public_interface="out" units="dimensionless"/>
      <variable cmeta:id="id_00012" name="ki" public_interface="in" units="second_order_rate_constant"/>
      <variable cmeta:id="id_00011" name="ko" public_interface="in" units="third_order_rate_constant"/>
      <variable name="kim" public_interface="in" units="first_order_rate_constant"/>
      <variable name="kom" public_interface="in" units="first_order_rate_constant"/>
      <variable name="I" public_interface="in" units="dimensionless"/>
      <variable name="R" public_interface="in" units="dimensionless"/>
      <variable cmeta:id="id_00005" name="Ca" public_interface="in" units="millimolar"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>O</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>kim</ci>
                     <ci>I</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>ko</ci>
                     <apply>
                        <power/>
                        <ci>Ca</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                     <ci>R</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>kom</ci>
                     <ci>O</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>ki</ci>
                     <ci>Ca</ci>
                     <ci>O</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="I">
      <variable initial_value="1" name="I" public_interface="out" units="dimensionless"/>
      <variable cmeta:id="id_00010" name="ki" public_interface="in" units="second_order_rate_constant"/>
      <variable cmeta:id="id_00009" name="ko" public_interface="in" units="third_order_rate_constant"/>
      <variable name="kim" public_interface="in" units="first_order_rate_constant"/>
      <variable name="kom" public_interface="in" units="first_order_rate_constant"/>
      <variable name="O" public_interface="in" units="dimensionless"/>
      <variable name="RI" public_interface="in" units="dimensionless"/>
      <variable cmeta:id="id_00004" name="Ca" public_interface="in" units="millimolar"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>I</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>ki</ci>
                     <ci>Ca</ci>
                     <ci>O</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>ko</ci>
                     <apply>
                        <power/>
                        <ci>Ca</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                     <ci>RI</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>kim</ci>
                     <ci>I</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kom</ci>
                     <ci>I</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="RI">
      <variable initial_value="1" name="RI" public_interface="out" units="dimensionless"/>
      <variable cmeta:id="id_00016" name="ki" public_interface="in" units="second_order_rate_constant"/>
      <variable cmeta:id="id_00015" name="ko" public_interface="in" units="third_order_rate_constant"/>
      <variable name="kim" public_interface="in" units="first_order_rate_constant"/>
      <variable name="kom" public_interface="in" units="first_order_rate_constant"/>
      <variable name="I" public_interface="in" units="dimensionless"/>
      <variable name="R" public_interface="in" units="dimensionless"/>
      <variable cmeta:id="id_00003" name="Ca" public_interface="in" units="millimolar"/>
      <variable name="time" public_interface="in" units="millisecond"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>RI</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>ki</ci>
                     <ci>Ca</ci>
                     <ci>R</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kom</ci>
                     <ci>I</ci>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>kim</ci>
                     <ci>RI</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>ko</ci>
                     <apply>
                        <power/>
                        <ci>Ca</ci>
                        <cn cellml:units="dimensionless">2</cn>
                     </apply>
                     <ci>RI</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" cmeta:id="id_00001" name="reaction_constants">
      <variable cmeta:id="id_00002" initial_value="0.0001" name="Ca" public_interface="out" units="millimolar"/>
      <variable cmeta:id="id_00007" initial_value="0.5" name="ki" public_interface="out" units="second_order_rate_constant"/>
      <variable cmeta:id="id_00008" initial_value="35" name="ko" public_interface="out" units="third_order_rate_constant"/>
      <variable initial_value="0.005" name="kim" public_interface="out" units="first_order_rate_constant"/>
      <variable initial_value="0.06" name="kom" public_interface="out" units="first_order_rate_constant"/>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="R" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="RI" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="R" component_2="O"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="O" variable_2="O"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="R" component_2="RI"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="RI" variable_2="RI"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O" component_2="I"/>
      <map_variables variable_1="O" variable_2="O"/>
      <map_variables variable_1="I" variable_2="I"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I" component_2="RI"/>
      <map_variables variable_1="I" variable_2="I"/>
      <map_variables variable_1="RI" variable_2="RI"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="R" component_2="reaction_constants"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
      <map_variables variable_1="ki" variable_2="ki"/>
      <map_variables variable_1="ko" variable_2="ko"/>
      <map_variables variable_1="kim" variable_2="kim"/>
      <map_variables variable_1="kom" variable_2="kom"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O" component_2="reaction_constants"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
      <map_variables variable_1="ki" variable_2="ki"/>
      <map_variables variable_1="ko" variable_2="ko"/>
      <map_variables variable_1="kim" variable_2="kim"/>
      <map_variables variable_1="kom" variable_2="kom"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I" component_2="reaction_constants"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
      <map_variables variable_1="ki" variable_2="ki"/>
      <map_variables variable_1="ko" variable_2="ko"/>
      <map_variables variable_1="kim" variable_2="kim"/>
      <map_variables variable_1="kom" variable_2="kom"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="RI" component_2="reaction_constants"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
      <map_variables variable_1="ki" variable_2="ki"/>
      <map_variables variable_1="ko" variable_2="ko"/>
      <map_variables variable_1="kim" variable_2="kim"/>
      <map_variables variable_1="kom" variable_2="kom"/>
   </connection>
<rdf:RDF>
<rdf:Description rdf:about="rdf:#3ea7433a-533c-441f-bab0-5084453ee48b">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
</rdf:type>
<rdf:_1 xml:lang="en">calcium dynamics</rdf:_1>
<rdf:_2 xml:lang="en">excitation-contraction coupling</rdf:_2>
<rdf:_3 xml:lang="en">electrophysiology</rdf:_3>
<rdf:_4 xml:lang="en">cardiac myocyte</rdf:_4>
<rdf:_5 xml:lang="en">Cardiac Myocyte</rdf:_5>
<rdf:_6 xml:lang="en">cardic</rdf:_6>
<rdf:_7 xml:lang="en">ryanodine receptor</rdf:_7>
</rdf:Description>
<rdf:Description rdf:about="rdf:#dc409d33-a6c1-4b27-8dbe-4c34495eb42e">
<rdf:type>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
</rdf:type>
<rdf:_1>
<rdf:Description rdf:about="rdf:#c77896e9-763d-4cf9-bc5d-3fa42d70cef5"/>
</rdf:_1>
<rdf:_2>
<rdf:Description rdf:about="rdf:#359a7d7e-e51e-442b-b4ab-547690c51d44"/>
</rdf:_2>
<rdf:_3>
<rdf:Description rdf:about="rdf:#b63d0233-9e90-496f-9317-9c334571b8d6"/>
</rdf:_3>
<rdf:_4>
<rdf:Description rdf:about="rdf:#c9137d23-c19c-4f86-9461-15766c5de40f"/>
</rdf:_4>
<rdf:_5>
<rdf:Description rdf:about="rdf:#e3a4579d-08db-45c1-8236-c80570249b6f"/>
</rdf:_5>
<rdf:_6>
<rdf:Description rdf:about="rdf:#a3c2cd73-25d3-4de5-9d15-dd0943e54d35"/>
</rdf:_6>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c77896e9-763d-4cf9-bc5d-3fa42d70cef5">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<vCard:N>
<rdf:Description rdf:about="rdf:#c65ea2b3-eb30-4499-9689-aab2227d3962"/>
</vCard:N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#359a7d7e-e51e-442b-b4ab-547690c51d44">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<vCard:N>
<rdf:Description rdf:about="rdf:#33d92d16-4320-47b6-a01e-1b824daaae2b"/>
</vCard:N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#b63d0233-9e90-496f-9317-9c334571b8d6">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<vCard:N>
<rdf:Description rdf:about="rdf:#0b362a02-9130-4a03-87b0-a2adfbcdc066"/>
</vCard:N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c9137d23-c19c-4f86-9461-15766c5de40f">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<vCard:N>
<rdf:Description rdf:about="rdf:#712b25c7-b350-4d98-a8f1-9fef7bf9c017"/>
</vCard:N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e3a4579d-08db-45c1-8236-c80570249b6f">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<vCard:N>
<rdf:Description rdf:about="rdf:#4cfb5e9b-a2cb-4a8f-bc49-9ee618486965"/>
</vCard:N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#a3c2cd73-25d3-4de5-9d15-dd0943e54d35">
<rdf:type>
<rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/>
</rdf:type>
<vCard:N>
<rdf:Description rdf:about="rdf:#26acc23f-0493-4270-8067-6fd8593f3eca"/>
</vCard:N>
</rdf:Description>
<rdf:Description rdf:about="rdf:#61db99fa-f55b-467d-8932-f8b6ec95b61b">
<dc:title xml:lang="en">Journal of General Physiology</dc:title>
</rdf:Description>
<rdf:Description rdf:about="#I">
<dc:title xml:lang="en">I</dc:title>
<dcterms:alternative xml:lang="en">Inactive state</dcterms:alternative>
</rdf:Description>
<rdf:Description rdf:about="#O">
<dc:title xml:lang="en">O</dc:title>
<dcterms:alternative xml:lang="en">Open state</dcterms:alternative>
</rdf:Description>
<rdf:Description rdf:about="#R">
<dc:title xml:lang="en">R</dc:title>
<dcterms:alternative xml:lang="en">Receptor</dcterms:alternative>
</rdf:Description>
<rdf:Description rdf:about="rdf:#26acc23f-0493-4270-8067-6fd8593f3eca">
<vCard:Given xml:lang="en">Eduardo</vCard:Given>
<vCard:Family xml:lang="en">Rios</vCard:Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#5220abb1-48ed-4e07-9bf7-7ad6079cdbe7">
<dc:creator>
<rdf:Description rdf:about="rdf:#dc409d33-a6c1-4b27-8dbe-4c34495eb42e"/>
</dc:creator>
<dc:title xml:lang="en">Local Control Models of Cardiac Excitation-Contraction Coupling A Possible Role for Allosteric Interactions between Ryanodine Receptors</dc:title>
<bqs:volume xml:lang="en">113</bqs:volume>
<bqs:first_page xml:lang="en">469</bqs:first_page>
<bqs:Journal>
<rdf:Description rdf:about="rdf:#61db99fa-f55b-467d-8932-f8b6ec95b61b"/>
</bqs:Journal>
<dcterms:issued>
<rdf:Description rdf:about="rdf:#1c3bf761-4cb7-42e6-8857-e1b253f39e05"/>
</dcterms:issued>
<bqs:last_page xml:lang="en">498</bqs:last_page>
</rdf:Description>
<rdf:Description rdf:about="rdf:#1c3bf761-4cb7-42e6-8857-e1b253f39e05">
<dcterms:W3CDTF xml:lang="en">1999-03-01</dcterms:W3CDTF>
</rdf:Description>
<rdf:Description rdf:about="#stern_1999">
<cmeta:comment>
<rdf:Description rdf:about="rdf:#ef65f439-0d29-411d-8988-ce70863dfd6a"/>
</cmeta:comment>
<dc:title xml:lang="en">
        Stern et al's 1999 model of a gating scheme for ryanodine receptors.
      </dc:title>
<cmeta:bio_entity xml:lang="en">Cardiac Myocyte</cmeta:bio_entity>
<bqs:reference>
<rdf:Description rdf:about="rdf:#58f03cff-0482-424e-aceb-6adb43d429c5"/>
</bqs:reference>
<bqs:reference>
<rdf:Description rdf:about="rdf:#e41230e0-0257-428b-9714-b50a18228a90"/>
</bqs:reference>
</rdf:Description>
<rdf:Description rdf:about="rdf:#ef65f439-0d29-411d-8988-ce70863dfd6a">
<dc:creator>
<rdf:Description rdf:about="rdf:#b8d87639-8ad3-4e28-afcc-9dd96c257b03"/>
</dc:creator>
<rdf:value xml:lang="en">This is the CellML description of Stern et al's 1999 model of a gating scheme for ryanodine receptors in cardiac muscle.</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#58f03cff-0482-424e-aceb-6adb43d429c5">
<bqs:Pubmed_id xml:lang="en">10051521</bqs:Pubmed_id>
<bqs:JournalArticle>
<rdf:Description rdf:about="rdf:#5220abb1-48ed-4e07-9bf7-7ad6079cdbe7"/>
</bqs:JournalArticle>
</rdf:Description>
<rdf:Description rdf:about="rdf:#e41230e0-0257-428b-9714-b50a18228a90">
<dc:subject>
<rdf:Description rdf:about="rdf:#fc0f1d6d-0a5c-4a38-bf64-70e3ac990f8d"/>
</dc:subject>
</rdf:Description>
<rdf:Description rdf:about="rdf:#fc0f1d6d-0a5c-4a38-bf64-70e3ac990f8d">
<bqs:subject_type xml:lang="en">keyword</bqs:subject_type>
<rdf:value>
<rdf:Description rdf:about="rdf:#3ea7433a-533c-441f-bab0-5084453ee48b"/>
</rdf:value>
</rdf:Description>
<rdf:Description rdf:about="rdf:#c65ea2b3-eb30-4499-9689-aab2227d3962">
<vCard:Given xml:lang="en">Michael</vCard:Given>
<vCard:Family xml:lang="en">Stern</vCard:Family>
<vCard:Other xml:lang="en">D</vCard:Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#33d92d16-4320-47b6-a01e-1b824daaae2b">
<vCard:Given xml:lang="en">Long-Sheng</vCard:Given>
<vCard:Family xml:lang="en">Song</vCard:Family>
</rdf:Description>
<rdf:Description rdf:about="rdf:#b8d87639-8ad3-4e28-afcc-9dd96c257b03">
<vCard:FN xml:lang="en">Catherine Lloyd</vCard:FN>
</rdf:Description>
<rdf:Description rdf:about="rdf:#712b25c7-b350-4d98-a8f1-9fef7bf9c017">
<vCard:Given xml:lang="en">Huang</vCard:Given>
<vCard:Family xml:lang="en">Yang</vCard:Family>
<vCard:Other xml:lang="en">Tian</vCard:Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#4cfb5e9b-a2cb-4a8f-bc49-9ee618486965">
<vCard:Given xml:lang="en">Kenneth</vCard:Given>
<vCard:Family xml:lang="en">Boheler</vCard:Family>
<vCard:Other xml:lang="en">R</vCard:Other>
</rdf:Description>
<rdf:Description rdf:about="rdf:#0b362a02-9130-4a03-87b0-a2adfbcdc066">
<vCard:Given xml:lang="en">James</vCard:Given>
<vCard:Family xml:lang="en">Sham</vCard:Family>
<vCard:Other xml:lang="en">K</vCard:Other>
<vCard:Other xml:lang="en">S</vCard:Other>
</rdf:Description>
<rdf:Description rdf:about="#id_00001">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:22984"/>
</occursIn>
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00002">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:22984"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00003">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:22984"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00004">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:22984"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00005">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:22984"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00006">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:22984"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00007">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00008">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00009">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00010">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00011">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00012">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00013">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00014">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00015">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
<rdf:Description rdf:about="#id_00016">
<occursIn xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/chebi/CHEBI:26216"/>
</occursIn>
</rdf:Description>
</rdf:RDF>
</model>