<?xml version="1.0"?>
  <model 
    xmlns="http://www.cellml.org/cellml/1.1#" 
    xmlns:cmeta="http://www.cellml.org/metadata/1.0#" 
    cmeta:id="butera_10_cell_1999" 
    name="butera_10_cell_1999"> 


<!-- seed 203 -->
<!-- g_syn_e_mean 1.000000e-001 -->
<!-- g_syn_e_stdDev 2.500000e-002 -->
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model1"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model1" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s1"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_1"/>
  </connection> 

  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model2"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model2" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s2"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_2"/>
  </connection> 

  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model3"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model3" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s3"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_3"/>
  </connection> 

  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model4"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model4" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s4"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_4"/>
  </connection> 

  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model5"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model5" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s5"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_5"/>
  </connection> 

  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model6"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model6" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s6"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_6"/>
  </connection> 

  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model7"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model7" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s7"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_7"/>
  </connection> 

  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model8"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model8" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s8"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_8"/>
  </connection> 

  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model9"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model9" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s9"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_9"/>
  </connection> 

  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="butera_single_cell_1999.cellml">
     <component component_ref="single_neuron_model" name="single_neuron_model10"/>
  </import>

  <connection>
      <map_components component_1="single_neuron_model10" component_2="synaptic_coupling"/>      <map_variables variable_1="s" variable_2="s10"/>
      <map_variables variable_1="sum_g_syn_e_s" variable_2="sum_g_syn_e_s_10"/>
  </connection> 

  <units name="nanoS">
    <unit prefix="nano" units="siemens"/>
  </units>

  <units name="millivolt">
    <unit prefix="milli" units="volt"/>
  </units>

  <units name="millisecond">
    <unit prefix="milli" units="second"/>
  </units>

  <component cmeta:id="synaptic_coupling" name="synaptic_coupling"> 
    <variable name="sum_g_syn_e_s_1" public_interface="out" units="nanoS"/> 
    <variable name="sum_g_syn_e_s_2" public_interface="out" units="nanoS"/> 
    <variable name="sum_g_syn_e_s_3" public_interface="out" units="nanoS"/> 
    <variable name="sum_g_syn_e_s_4" public_interface="out" units="nanoS"/> 
    <variable name="sum_g_syn_e_s_5" public_interface="out" units="nanoS"/> 
    <variable name="sum_g_syn_e_s_6" public_interface="out" units="nanoS"/> 
    <variable name="sum_g_syn_e_s_7" public_interface="out" units="nanoS"/> 
    <variable name="sum_g_syn_e_s_8" public_interface="out" units="nanoS"/> 
    <variable name="sum_g_syn_e_s_9" public_interface="out" units="nanoS"/> 
    <variable name="sum_g_syn_e_s_10" public_interface="out" units="nanoS"/> 

    <variable initial_value="0.071570" name="g_syn_e_1_2" units="nanoS"/> 
    <variable initial_value="0.086470" name="g_syn_e_1_3" units="nanoS"/> 
    <variable initial_value="0.109365" name="g_syn_e_1_4" units="nanoS"/> 
    <variable initial_value="0.081664" name="g_syn_e_1_5" units="nanoS"/> 
    <variable initial_value="0.097906" name="g_syn_e_1_6" units="nanoS"/> 
    <variable initial_value="0.089890" name="g_syn_e_1_7" units="nanoS"/> 
    <variable initial_value="0.135650" name="g_syn_e_1_8" units="nanoS"/> 
    <variable initial_value="0.103754" name="g_syn_e_1_9" units="nanoS"/> 
    <variable initial_value="0.071959" name="g_syn_e_1_10" units="nanoS"/> 
    <variable initial_value="0.082147" name="g_syn_e_2_1" units="nanoS"/> 
    <variable initial_value="0.099094" name="g_syn_e_2_3" units="nanoS"/> 
    <variable initial_value="0.095482" name="g_syn_e_2_4" units="nanoS"/> 
    <variable initial_value="0.094385" name="g_syn_e_2_5" units="nanoS"/> 
    <variable initial_value="0.066989" name="g_syn_e_2_6" units="nanoS"/> 
    <variable initial_value="0.062195" name="g_syn_e_2_7" units="nanoS"/> 
    <variable initial_value="0.069408" name="g_syn_e_2_8" units="nanoS"/> 
    <variable initial_value="0.078109" name="g_syn_e_2_9" units="nanoS"/> 
    <variable initial_value="0.096854" name="g_syn_e_2_10" units="nanoS"/> 
    <variable initial_value="0.103457" name="g_syn_e_3_1" units="nanoS"/> 
    <variable initial_value="0.120894" name="g_syn_e_3_2" units="nanoS"/> 
    <variable initial_value="0.115212" name="g_syn_e_3_4" units="nanoS"/> 
    <variable initial_value="0.117401" name="g_syn_e_3_5" units="nanoS"/> 
    <variable initial_value="0.096746" name="g_syn_e_3_6" units="nanoS"/> 
    <variable initial_value="0.104139" name="g_syn_e_3_7" units="nanoS"/> 
    <variable initial_value="0.083024" name="g_syn_e_3_8" units="nanoS"/> 
    <variable initial_value="0.091031" name="g_syn_e_3_9" units="nanoS"/> 
    <variable initial_value="0.092133" name="g_syn_e_3_10" units="nanoS"/> 
    <variable initial_value="0.085076" name="g_syn_e_4_1" units="nanoS"/> 
    <variable initial_value="0.082159" name="g_syn_e_4_2" units="nanoS"/> 
    <variable initial_value="0.086408" name="g_syn_e_4_3" units="nanoS"/> 
    <variable initial_value="0.098623" name="g_syn_e_4_5" units="nanoS"/> 
    <variable initial_value="0.081266" name="g_syn_e_4_6" units="nanoS"/> 
    <variable initial_value="0.077327" name="g_syn_e_4_7" units="nanoS"/> 
    <variable initial_value="0.074618" name="g_syn_e_4_8" units="nanoS"/> 
    <variable initial_value="0.131525" name="g_syn_e_4_9" units="nanoS"/> 
    <variable initial_value="0.155646" name="g_syn_e_4_10" units="nanoS"/> 
    <variable initial_value="0.069647" name="g_syn_e_5_1" units="nanoS"/> 
    <variable initial_value="0.076869" name="g_syn_e_5_2" units="nanoS"/> 
    <variable initial_value="0.104963" name="g_syn_e_5_3" units="nanoS"/> 
    <variable initial_value="0.082993" name="g_syn_e_5_4" units="nanoS"/> 
    <variable initial_value="0.147318" name="g_syn_e_5_6" units="nanoS"/> 
    <variable initial_value="0.077629" name="g_syn_e_5_7" units="nanoS"/> 
    <variable initial_value="0.098833" name="g_syn_e_5_8" units="nanoS"/> 
    <variable initial_value="0.130817" name="g_syn_e_5_9" units="nanoS"/> 
    <variable initial_value="0.148160" name="g_syn_e_5_10" units="nanoS"/> 
    <variable initial_value="0.104962" name="g_syn_e_6_1" units="nanoS"/> 
    <variable initial_value="0.118758" name="g_syn_e_6_2" units="nanoS"/> 
    <variable initial_value="0.123650" name="g_syn_e_6_3" units="nanoS"/> 
    <variable initial_value="0.059538" name="g_syn_e_6_4" units="nanoS"/> 
    <variable initial_value="0.116426" name="g_syn_e_6_5" units="nanoS"/> 
    <variable initial_value="0.089794" name="g_syn_e_6_7" units="nanoS"/> 
    <variable initial_value="0.110721" name="g_syn_e_6_8" units="nanoS"/> 
    <variable initial_value="0.118662" name="g_syn_e_6_9" units="nanoS"/> 
    <variable initial_value="0.073362" name="g_syn_e_6_10" units="nanoS"/> 
    <variable initial_value="0.076640" name="g_syn_e_7_1" units="nanoS"/> 
    <variable initial_value="0.067199" name="g_syn_e_7_2" units="nanoS"/> 
    <variable initial_value="0.122547" name="g_syn_e_7_3" units="nanoS"/> 
    <variable initial_value="0.115906" name="g_syn_e_7_4" units="nanoS"/> 
    <variable initial_value="0.140625" name="g_syn_e_7_5" units="nanoS"/> 
    <variable initial_value="0.078281" name="g_syn_e_7_6" units="nanoS"/> 
    <variable initial_value="0.098112" name="g_syn_e_7_8" units="nanoS"/> 
    <variable initial_value="0.062478" name="g_syn_e_7_9" units="nanoS"/> 
    <variable initial_value="0.062332" name="g_syn_e_7_10" units="nanoS"/> 
    <variable initial_value="0.073508" name="g_syn_e_8_1" units="nanoS"/> 
    <variable initial_value="0.086639" name="g_syn_e_8_2" units="nanoS"/> 
    <variable initial_value="0.095173" name="g_syn_e_8_3" units="nanoS"/> 
    <variable initial_value="0.087553" name="g_syn_e_8_4" units="nanoS"/> 
    <variable initial_value="0.120915" name="g_syn_e_8_5" units="nanoS"/> 
    <variable initial_value="0.084482" name="g_syn_e_8_6" units="nanoS"/> 
    <variable initial_value="0.103780" name="g_syn_e_8_7" units="nanoS"/> 
    <variable initial_value="0.154443" name="g_syn_e_8_9" units="nanoS"/> 
    <variable initial_value="0.073669" name="g_syn_e_8_10" units="nanoS"/> 
    <variable initial_value="0.067518" name="g_syn_e_9_1" units="nanoS"/> 
    <variable initial_value="0.072200" name="g_syn_e_9_2" units="nanoS"/> 
    <variable initial_value="0.086218" name="g_syn_e_9_3" units="nanoS"/> 
    <variable initial_value="0.087328" name="g_syn_e_9_4" units="nanoS"/> 
    <variable initial_value="0.094374" name="g_syn_e_9_5" units="nanoS"/> 
    <variable initial_value="0.112092" name="g_syn_e_9_6" units="nanoS"/> 
    <variable initial_value="0.061781" name="g_syn_e_9_7" units="nanoS"/> 
    <variable initial_value="0.122821" name="g_syn_e_9_8" units="nanoS"/> 
    <variable initial_value="0.053459" name="g_syn_e_9_10" units="nanoS"/> 
    <variable initial_value="0.119262" name="g_syn_e_10_1" units="nanoS"/> 
    <variable initial_value="0.091661" name="g_syn_e_10_2" units="nanoS"/> 
    <variable initial_value="0.102775" name="g_syn_e_10_3" units="nanoS"/> 
    <variable initial_value="0.087011" name="g_syn_e_10_4" units="nanoS"/> 
    <variable initial_value="0.144282" name="g_syn_e_10_5" units="nanoS"/> 
    <variable initial_value="0.146688" name="g_syn_e_10_6" units="nanoS"/> 
    <variable initial_value="0.073808" name="g_syn_e_10_7" units="nanoS"/> 
    <variable initial_value="0.118904" name="g_syn_e_10_8" units="nanoS"/> 
    <variable initial_value="0.138856" name="g_syn_e_10_9" units="nanoS"/> 

    <variable name="s1" public_interface="in" units="dimensionless"/> 
    <variable name="s2" public_interface="in" units="dimensionless"/> 
    <variable name="s3" public_interface="in" units="dimensionless"/> 
    <variable name="s4" public_interface="in" units="dimensionless"/> 
    <variable name="s5" public_interface="in" units="dimensionless"/> 
    <variable name="s6" public_interface="in" units="dimensionless"/> 
    <variable name="s7" public_interface="in" units="dimensionless"/> 
    <variable name="s8" public_interface="in" units="dimensionless"/> 
    <variable name="s9" public_interface="in" units="dimensionless"/> 
    <variable name="s10" public_interface="in" units="dimensionless"/> 

    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply><eq /> 
        <ci> sum_g_syn_e_s_1 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_2_1 </ci>
            <ci> s2 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_3_1 </ci>
            <ci> s3 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_4_1 </ci>
            <ci> s4 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_5_1 </ci>
            <ci> s5 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_6_1 </ci>
            <ci> s6 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_7_1 </ci>
            <ci> s7 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_8_1 </ci>
            <ci> s8 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_9_1 </ci>
            <ci> s9 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_10_1 </ci>
            <ci> s10 </ci>
          </apply> 
		</apply> 
	  </apply> 

      <apply><eq /> 
        <ci> sum_g_syn_e_s_2 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_1_2 </ci>
            <ci> s1 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_3_2 </ci>
            <ci> s3 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_4_2 </ci>
            <ci> s4 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_5_2 </ci>
            <ci> s5 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_6_2 </ci>
            <ci> s6 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_7_2 </ci>
            <ci> s7 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_8_2 </ci>
            <ci> s8 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_9_2 </ci>
            <ci> s9 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_10_2 </ci>
            <ci> s10 </ci>
          </apply> 
		</apply> 
	  </apply> 

      <apply><eq /> 
        <ci> sum_g_syn_e_s_3 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_1_3 </ci>
            <ci> s1 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_2_3 </ci>
            <ci> s2 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_4_3 </ci>
            <ci> s4 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_5_3 </ci>
            <ci> s5 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_6_3 </ci>
            <ci> s6 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_7_3 </ci>
            <ci> s7 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_8_3 </ci>
            <ci> s8 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_9_3 </ci>
            <ci> s9 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_10_3 </ci>
            <ci> s10 </ci>
          </apply> 
		</apply> 
	  </apply> 

      <apply><eq /> 
        <ci> sum_g_syn_e_s_4 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_1_4 </ci>
            <ci> s1 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_2_4 </ci>
            <ci> s2 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_3_4 </ci>
            <ci> s3 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_5_4 </ci>
            <ci> s5 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_6_4 </ci>
            <ci> s6 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_7_4 </ci>
            <ci> s7 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_8_4 </ci>
            <ci> s8 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_9_4 </ci>
            <ci> s9 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_10_4 </ci>
            <ci> s10 </ci>
          </apply> 
		</apply> 
	  </apply> 

      <apply><eq /> 
        <ci> sum_g_syn_e_s_5 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_1_5 </ci>
            <ci> s1 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_2_5 </ci>
            <ci> s2 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_3_5 </ci>
            <ci> s3 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_4_5 </ci>
            <ci> s4 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_6_5 </ci>
            <ci> s6 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_7_5 </ci>
            <ci> s7 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_8_5 </ci>
            <ci> s8 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_9_5 </ci>
            <ci> s9 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_10_5 </ci>
            <ci> s10 </ci>
          </apply> 
		</apply> 
	  </apply> 

      <apply><eq /> 
        <ci> sum_g_syn_e_s_6 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_1_6 </ci>
            <ci> s1 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_2_6 </ci>
            <ci> s2 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_3_6 </ci>
            <ci> s3 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_4_6 </ci>
            <ci> s4 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_5_6 </ci>
            <ci> s5 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_7_6 </ci>
            <ci> s7 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_8_6 </ci>
            <ci> s8 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_9_6 </ci>
            <ci> s9 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_10_6 </ci>
            <ci> s10 </ci>
          </apply> 
		</apply> 
	  </apply> 

      <apply><eq /> 
        <ci> sum_g_syn_e_s_7 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_1_7 </ci>
            <ci> s1 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_2_7 </ci>
            <ci> s2 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_3_7 </ci>
            <ci> s3 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_4_7 </ci>
            <ci> s4 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_5_7 </ci>
            <ci> s5 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_6_7 </ci>
            <ci> s6 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_8_7 </ci>
            <ci> s8 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_9_7 </ci>
            <ci> s9 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_10_7 </ci>
            <ci> s10 </ci>
          </apply> 
		</apply> 
	  </apply> 

      <apply><eq /> 
        <ci> sum_g_syn_e_s_8 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_1_8 </ci>
            <ci> s1 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_2_8 </ci>
            <ci> s2 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_3_8 </ci>
            <ci> s3 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_4_8 </ci>
            <ci> s4 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_5_8 </ci>
            <ci> s5 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_6_8 </ci>
            <ci> s6 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_7_8 </ci>
            <ci> s7 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_9_8 </ci>
            <ci> s9 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_10_8 </ci>
            <ci> s10 </ci>
          </apply> 
		</apply> 
	  </apply> 

      <apply><eq /> 
        <ci> sum_g_syn_e_s_9 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_1_9 </ci>
            <ci> s1 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_2_9 </ci>
            <ci> s2 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_3_9 </ci>
            <ci> s3 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_4_9 </ci>
            <ci> s4 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_5_9 </ci>
            <ci> s5 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_6_9 </ci>
            <ci> s6 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_7_9 </ci>
            <ci> s7 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_8_9 </ci>
            <ci> s8 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_10_9 </ci>
            <ci> s10 </ci>
          </apply> 
		</apply> 
	  </apply> 

      <apply><eq /> 
        <ci> sum_g_syn_e_s_10 </ci> 
        <apply><plus /> 
		  <apply>
            <times/>
            <ci> g_syn_e_1_10 </ci>
            <ci> s1 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_2_10 </ci>
            <ci> s2 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_3_10 </ci>
            <ci> s3 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_4_10 </ci>
            <ci> s4 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_5_10 </ci>
            <ci> s5 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_6_10 </ci>
            <ci> s6 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_7_10 </ci>
            <ci> s7 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_8_10 </ci>
            <ci> s8 </ci>
          </apply> 
		  <apply>
            <times/>
            <ci> g_syn_e_9_10 </ci>
            <ci> s9 </ci>
          </apply> 
		</apply> 
	  </apply> 

	</math> 
  </component> 

  <component name="ModelInterfacing"> 
    <variable cmeta:id="ModelInterfacing_timeDuplicate" name="timeDuplicate" units="millisecond"/> 
    <variable name="time" public_interface="in" units="millisecond"/> 

    <variable name="V1" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V1Duplicate" name="V1Duplicate" units="millivolt"/> 
	
    <variable name="V2" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V2Duplicate" name="V2Duplicate" units="millivolt"/> 
	
    <variable name="V3" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V3Duplicate" name="V3Duplicate" units="millivolt"/> 
	
    <variable name="V4" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V4Duplicate" name="V4Duplicate" units="millivolt"/> 
	
    <variable name="V5" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V5Duplicate" name="V5Duplicate" units="millivolt"/> 
	
    <variable name="V6" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V6Duplicate" name="V6Duplicate" units="millivolt"/> 
	
    <variable name="V7" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V7Duplicate" name="V7Duplicate" units="millivolt"/> 
	
    <variable name="V8" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V8Duplicate" name="V8Duplicate" units="millivolt"/> 
	
    <variable name="V9" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V9Duplicate" name="V9Duplicate" units="millivolt"/> 
	
    <variable name="V10" public_interface="in" units="millivolt"/>
    <variable cmeta:id="ModelInterfacing_V10Duplicate" name="V10Duplicate" units="millivolt"/> 
	
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
    <apply><eq/><ci>timeDuplicate</ci><ci>time</ci></apply> 

    <apply><eq/><ci>V1Duplicate</ci><ci>V1</ci></apply> 

    <apply><eq/><ci>V2Duplicate</ci><ci>V2</ci></apply> 

    <apply><eq/><ci>V3Duplicate</ci><ci>V3</ci></apply> 

    <apply><eq/><ci>V4Duplicate</ci><ci>V4</ci></apply> 

    <apply><eq/><ci>V5Duplicate</ci><ci>V5</ci></apply> 

    <apply><eq/><ci>V6Duplicate</ci><ci>V6</ci></apply> 

    <apply><eq/><ci>V7Duplicate</ci><ci>V7</ci></apply> 

    <apply><eq/><ci>V8Duplicate</ci><ci>V8</ci></apply> 

    <apply><eq/><ci>V9Duplicate</ci><ci>V9</ci></apply> 

    <apply><eq/><ci>V10Duplicate</ci><ci>V10</ci></apply> 

	</math> 
  </component> 

  <connection> 
    <map_components component_1="single_neuron_model1" component_2="ModelInterfacing"/> 
    <map_variables variable_1="time" variable_2="time"/> 
  </connection> 

  <connection> 
    <map_components component_1="single_neuron_model1" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V1"/> 
 </connection> 

  <connection> 
    <map_components component_1="single_neuron_model2" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V2"/> 
 </connection> 

  <connection> 
    <map_components component_1="single_neuron_model3" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V3"/> 
 </connection> 

  <connection> 
    <map_components component_1="single_neuron_model4" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V4"/> 
 </connection> 

  <connection> 
    <map_components component_1="single_neuron_model5" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V5"/> 
 </connection> 

  <connection> 
    <map_components component_1="single_neuron_model6" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V6"/> 
 </connection> 

  <connection> 
    <map_components component_1="single_neuron_model7" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V7"/> 
 </connection> 

  <connection> 
    <map_components component_1="single_neuron_model8" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V8"/> 
 </connection> 

  <connection> 
    <map_components component_1="single_neuron_model9" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V9"/> 
 </connection> 

  <connection> 
    <map_components component_1="single_neuron_model10" component_2="ModelInterfacing"/> 
    <map_variables variable_1="V" variable_2="V10"/> 
 </connection> 

</model>