// reference: Family Guyton; Family Kidney; title Description of Guyton kidney module; W3CDTF 2008-00-00 00:00
// reference: subject_type keyword; physiology; organ systems; cardiovascular circulation; kidney; Guyton
// value: FUNCTION OF THE KIDNEY This section is a highly simplified analysis of renal function, including analysis of blood flow through the kidney and of the formation of glomerular filtrate. Then the changes that occur in the filtrate as it passes through the tubules are calculated. However, only four substances are considered as they pass through the tubules: sodium, potassium, urea, and water. The control effects of angiotensin, aldosterone, antidiuretic hormone, and nervous signals are also presented.
// solverHint: initialValue 1.00071; degree 0; variable #renal_autoregulatory_feedback_factor_RNAUG2
// solverHint: initialValue 1.00071; degree 0; variable #renal_autoregulatory_feedback_factor_RNAUG1
// solverHint: initialValue 1.00071; degree 0; variable #renal_autoregulatory_feedback_factor_RNAUG1T
// solverHint: initialValue 40.0; degree 0; variable #AAR_calculation_AAR1
// solverHint: initialValue 40.0; degree 0; variable #atrial_natriuretic_peptide_effect_on_AAR_AAR
// solverHint: initialValue 40.0; degree 0; variable #atrial_natriuretic_peptide_effect_on_AAR_AART
// solverHint: initialValue 0.6; degree 0; variable #effect_of_renal_autoregulatory_feedback_on_EAR_RNAUG4
// solverHint: initialValue 42.4737; degree 0; variable #EAR_calculation_EAR
// solverHint: initialValue 42.4737; degree 0; variable #EAR_calculation_EAR1
// solverHint: initialValue 84.8171; degree 0; variable #total_renal_resistance_RR
// solverHint: initialValue 1.22057; degree 0; variable #normal_renal_blood_flow_RFN
// solverHint: initialValue 37.8383; degree 0; variable #glomerular_colloid_osmotic_pressure_GLPC
// solverHint: initialValue 1.20569; degree 0; variable #glomerular_colloid_osmotic_pressure_EFAFPR
// solverHint: initialValue 1.20569; degree 0; variable #glomerular_colloid_osmotic_pressure_EFAFPR1
// solverHint: initialValue 47.88; degree 0; variable #glomerular_pressure_APD
// solverHint: initialValue 51.842; degree 0; variable #glomerular_pressure_GLP
// solverHint: initialValue 0.125006; degree 0; variable #glomerular_filtration_rate_GFN
// solverHint: initialValue 0.125006; degree 0; variable #glomerular_filtration_rate_GFN1
// solverHint: initialValue 6.00368; degree 0; variable #glomerular_filtration_rate_PFL
// solverHint: initialValue 1.00005; degree 0; variable #proximal_tubular_and_macula_densa_flow_PTFL
// solverHint: initialValue 1.00051; degree 0; variable #proximal_tubular_and_macula_densa_flow_MDFLWT
// solverHint: initialValue 1.00051; degree 0; variable #proximal_tubular_and_macula_densa_flow_MDFLW
def model kidney_CellML1_0_model as
  // ========================================	DOCUMENTATION		=============================================
  // Guyton Model: Kidney
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model has not been validated. The equations in this file may contain errors and the output from the model may not conform to the results from the MODSIM program. Due to the differences between procedural code (in this case C-code) and declarative languages (CellML), some aspects of the original model were not able to be encapsulated by the CellML model (such as the damping of variables). Work is underway to fix these omissions and validate the CellML model. We also anticipate that many of these problems will be fixed when the CellML 1.0 models are combined in a CellML 1.1 format.
  //
  // Model Structure
  //
  // Arthur Guyton (1919-2003) was an American physiologist who became famous for his 1950s experiments in which he studied the physiology of cardiac output and its relationship with the peripheral circulation. The results of these experiments challenged the conventional wisdom that it was the heart itself that controlled cardiac output. Instead Guyton demonstrated that it was the need of the body tissues for oxygen which was the real regulator of cardiac output. The "Guyton Curves" describe the relationship between right atrial pressures and cardiac output, and they form a foundation for understanding the physiology of circulation.
  //
  // The Guyton model of fluid, electrolyte, and circulatory regulation is an extensive mathematical model of human circulatory physiology, capable of simulating a variety of experimental conditions, and contains a number of linked subsystems relating to circulation and its neuroendocrine control.
  //
  // This is a CellML translation of the Guyton model of the regulation of the circulatory system. The complete model consists of separate modules each of which characterise a separate physiological subsystems. The Circulation Dynamics is the primary system, to which other modules/blocks are connected. The other modules characterise the dynamics of the kidney, electrolytes and cell water, thirst and drinking, hormone regulation, autonomic regulation, cardiovascular system etc, and these feedback on the central circulation model. The CellML code in these modules is based on the C code from the programme C-MODSIM created by Dr Jean-Pierre Montani.
  //
  // This particular CellML model describes the function of the kidney. This section is a highly simplified analysis of renal function, including analysis of blood flow through the kidney and of the formation of glomerular filtrate. Then the changes that occur in the filtrate as it passes through the tubules are calculated. However, only four substances are considered as they pass through the tubules: sodium, potassium, urea, and water. The control effects of angiotensin, aldosterone, antidiuretic hormone, and nervous signals are also presented.
  //
  // model diagram
  //
  // A systems analysis diagram for the full Guyton model describing circulation regulation.
  //
  // <informalfigure float="0" id="kidney_diagram"> <mediaobject> <imageobject> <objectinfo> <title>model diagram</title> </objectinfo> <imagedata fileref="kidney.png"/> </imageobject> </mediaobject> <caption>A schematic diagram of the components and processes described in the current CellML model.</caption> </informalfigure>
  //
  // There are several publications referring to the Guyton model. One of these papers is cited below:
  //
  // Circulation: Overall Regulation, A.C. Guyton, T.G. Coleman, and H.J. Granger, 1972, Annual Review of Physiology , 34, 13-44. PubMed ID: 4334846 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=4334846&query_hl=1&itool=pubmed_docsum)
  // =======================================================    CITATION AND KEYWORD METADATA    ==================================================
  // ======================================================= 		UNITS		==================================================
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit per_minute as
    unit minute {expo: -1};
  enddef;
  def unit minute_per_L as
    unit minute;
    unit litre {expo: -1};
  enddef;
  def unit mmHg as
    unit newton {mult: 133.322};
    unit metre {expo: -2};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg_per_mL as
    unit mmHg;
    unit mL {expo: -1};
  enddef;
  def unit mmHg_L as
    unit mmHg;
    unit litre;
  enddef;
  def unit per_mmHg2 as
    unit mmHg {expo: -2};
  enddef;
  def unit mmHg3 as
    unit mmHg {expo: 3};
  enddef;
  def unit monovalent_mEq as
    unit mole {pref: milli};
  enddef;
  def unit monovalent_mEq_per_minute as
    unit mole {pref: milli};
    unit minute {expo: -1};
  enddef;
  def unit monovalent_mEq_per_litre as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mOsm as
    unit mole {pref: milli};
  enddef;
  def unit mOsm_per_litre as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mOsm_per_minute as
    unit mole {pref: milli};
    unit minute {expo: -1};
  enddef;
  def unit monovalent_mEq_per_litre_per_minute as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit litre2_per_monovalent_mEq_per_minute as
    unit litre {expo: 2};
    unit mole {pref: milli, expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit L_per_minute as
    unit litre;
    unit minute {expo: -1};
  enddef;
  def unit per_mmHg_per_minute as
    unit mmHg {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit gram_per_L as
    unit gram;
    unit litre {expo: -1};
  enddef;
  def unit L_mmHg_per_gram as
    unit litre;
    unit mmHg;
    unit gram {expo: -1};
  enddef;
  def unit L2_mmHg_per_gram2 as
    unit litre {expo: 2};
    unit mmHg;
    unit gram {expo: -2};
  enddef;
  def unit mmHg_minute_per_L as
    unit minute;
    unit mmHg;
    unit litre {expo: -1};
  enddef;
  def unit mmHg_L_per_minute as
    unit litre;
    unit mmHg;
    unit minute {expo: -1};
  enddef;
  def unit gram_per_minute as
    unit gram;
    unit minute {expo: -1};
  enddef;
  def unit mL_per_L as
    unit litre {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mL_per_L_per_mmHg as
    unit litre {pref: milli};
    unit litre {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit mL_per_L_per_minute as
    unit litre {pref: milli};
    unit litre {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit mL_per_minute_per_mmHg as
    unit litre {pref: milli};
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit L_mL_per_minute_per_mmHg as
    unit litre;
    unit litre {pref: milli};
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit L_per_mL as
    unit litre {pref: milli, expo: -1};
    unit litre;
  enddef;
  def unit L_per_mmHg as
    unit mmHg {expo: -1};
    unit litre;
  enddef;
  def unit mL_per_minute as
    unit mL;
    unit minute {expo: -1};
  enddef;
  def unit L_per_minute_per_mmHg as
    unit litre;
    unit minute {expo: -1};
    unit mmHg {expo: -1};
  enddef;
  def unit L_per_minute_per_mmHg2 as
    unit litre;
    unit minute {expo: -1};
    unit mmHg {expo: -2};
  enddef;
  // ====================================================================================================================
  // ========================================	ENVIRONMENT COMPONENT	=============================================

  def comp environment as
    var time: minute {priv: none, pub: out};
  enddef;
  // ========================================	INITIAL_GUESSES	=============================================
  // ========================================	KIDNEY TOP-LEVEL COMPONENT		=============================================

  // value: Encapsulation grouping component containing all the components in the Kidney Model. The inputs and outputs of the Kidney Model must be passed by this component.
  def comp kidney as
    var time: minute {priv: out, pub: in};
    // Inputs from components in other models
    var ADHMK: dimensionless {init: 1.0, priv: out, pub: none};
    var AMK: dimensionless {init: 1.037, priv: out, pub: none};
    var AMNA: dimensionless {init: 1.0, priv: out, pub: none};
    var ANM: dimensionless {init: 0.987545, priv: out, pub: none};
    var ANPX: dimensionless {init: 1.0, priv: out, pub: none};
    var AUM: dimensionless {init: 1.00066, priv: out, pub: none};
    var CKE: monovalent_mEq_per_litre {init: 4.44092, priv: out, pub: none};
    var CNA: monovalent_mEq_per_litre {init: 142.035, priv: out, pub: none};
    var HM1: dimensionless {init: 0.39984739, priv: out, pub: none};
    var MYOGRS: dimensionless {init: 1.0, priv: out, pub: none};
    var PA: mmHg {init: 103.525, priv: out, pub: none};
    var PAMKRN: dimensionless {init: 1.0, priv: out, pub: none};
    var PPC: mmHg {init: 29.9941, priv: out, pub: none};
    var VTW: litre {init: 39.8952, priv: out, pub: none};
  enddef;
  // INPUT CONNECTIONS
  def map between kidney and environment for
    vars time and time;
  enddef;
  // ========================================	PERFUSION PRESSURE	=============================================

  // value: KD1: The perfusion pressure of the kidneys (PAR) is calculated by subtracting any pressure gradient caused by renal arterial constriction (GBL) from the systemic arterial pressure (PA). This block allows one to simulate Goldblatt hypertension. KD2: This block allows one to simulate other experiments. The factor (RAPRSP), when set to any value besides zero, will fix the renal perfusion pressure (PAR) to an exact value that will not change regardless of changes in systemic arterial pressure. The factor (RFCDFT) allows one to test the hypothetical condition that function of the kidney over a long period of time asymptotically approaches normal output function regardless of changes in arterial pressure. That is, PAR drifts continually back toward the normal mean value of 100 rather than being determined by the systemic arterial pressure, simulating shift of the renal function curve. This is used to test theories that in the long run kidney output function can be independent of arterial pressure.
  def comp perfusion_pressure as
    // Inputs from other components
    var PA: mmHg {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var PAR: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var GBL: mmHg {priv: none, pub: in};
    var RAPRSP: mmHg {priv: none, pub: in};
    var RFCDFT: dimensionless {priv: none, pub: in};
    var RCDFPC: dimensionless {priv: none, pub: in};
    var RCDFDP: minute {priv: none, pub: in};
    // Internal variables
    var PAR1: mmHg {init: 103.525, priv: none, pub: none};
    // value: KD2: This block allows one to simulate other experiments. The factor (RAPRSP), when set to any value besides zero, will fix the renal perfusion pressure (PAR) to an exact value that will not change regardless of changes in systemic arterial pressure. The factor (RFCDFT) allows one to test the hypothetical condition that function of the kidney over a long period of time asymptotically approaches normal output function regardless of changes in arterial pressure. That is, PAR drifts continually back toward the normal mean value of 100 rather than being determined by the systemic arterial pressure, simulating shift of the renal function curve. This is used to test theories that in the long run kidney output function can be independent of arterial pressure.
    ode(PAR1, time) = (100{mmHg}+(PA-100{mmHg})*RCDFPC-PAR1)/RCDFDP;
    // value: KD1: The perfusion pressure of the kidneys (PAR) is calculated by subtracting any pressure gradient caused by renal arterial constriction (GBL) from the systemic arterial pressure (PA). This block allows one to simulate Goldblatt hypertension. KD2: This block allows one to simulate other experiments. The factor (RAPRSP), when set to any value besides zero, will fix the renal perfusion pressure (PAR) to an exact value that will not change regardless of changes in systemic arterial pressure. The factor (RFCDFT) allows one to test the hypothetical condition that function of the kidney over a long period of time asymptotically approaches normal output function regardless of changes in arterial pressure. That is, PAR drifts continually back toward the normal mean value of 100 rather than being determined by the systemic arterial pressure, simulating shift of the renal function curve. This is used to test theories that in the long run kidney output function can be independent of arterial pressure.
    PAR = sel
      case (RAPRSP > 0{mmHg}) and (RFCDFT <= 0{dimensionless}):
        RAPRSP;
      case RFCDFT > 0{dimensionless}:
        PAR1;
      otherwise:
        PA-GBL;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between perfusion_pressure and kidney for
    vars PA and PA;
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between perfusion_pressure and parameter_values for
    vars GBL and GBL;
    vars RAPRSP and RAPRSP;
    vars RFCDFT and RFCDFT;
    vars RCDFPC and RCDFPC;
    vars RCDFDP and RCDFDP;
  enddef;
  // ========================================	RENAL AUTOREGULATORY FEEDBACK FACTOR		=============================================

  // value: KD57, KD58, KD59, KD60, KD61, KD62, KD63, KD64, KD65, KD66, and KD67: Calculation of an autoregulatory feedback factor that affects the degree of constriction of both afferent and efferent arterioles (RNAUG2) which is the output of Block 64. This feedback effect, and the resistance of the afferent and efferent arterioles, increases in proportion to the calculation from these blocks and in response to the flow rate of fluid in the tubules at the macula densa (MDFLW) which is the input to Block 57. Blocks 57, 58, and 59 calculate the sensitivity of this feedback mechanism, and the sensitivity control factor is RNAUGN in Block 58. Blocks 60 and 61 calculate the time constant of development of this feedback in the arterioles after any change in rate of flow (MDFLW) at the macula densa. The time constant of this feedback response is RNAGTC in Block 60. The value RNAULL is the lower limit to the autoregulatory response (RNAUG1) as set by Block 62. RNAUUL is the upper limit, as set by Block 63. Block 65, 66, and 67 calculate obliterative adaptation of this feedback response in case such as this does occur. The sensitivity of this, RNAUAD, in Block 66 is set at zero because many persons believe there is no such decay of this feedback response. Yet others have postulated such a feedback response, in which case RNAUAD would then become the factor that sets the time constant of the loss of the feedback response with time. The output of this total system from Block 14 is RNAUG2. NB - REMOVED DAMPING FROM KD57-KD61!!!!!!!!!
  def comp renal_autoregulatory_feedback_factor as
    // Inputs from other components
    var MDFLW: L_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var RNAUG2: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var RNAUGN: minute_per_L {priv: none, pub: in};
    var RNAULL: dimensionless {priv: none, pub: in};
    var RNAUUL: dimensionless {priv: none, pub: in};
    var RNAUAD: per_minute {priv: none, pub: in};
    // Internal variables
    var RNAUG1: dimensionless {priv: none, pub: none};
    var RNAUG1T: dimensionless {priv: none, pub: none};
    var RNAUG3: dimensionless {init: 0.0, priv: none, pub: none};
    // value: KD57, KD58, KD59, KD60 and KD61: Calculation of an autoregulatory feedback factor that affects the degree of constriction of both afferent and efferent arterioles (RNAUG2) which is the output of Block 64. This feedback effect, and the resistance of the afferent and efferent arterioles, increases in proportion to the calculation from these blocks and in response to the flow rate of fluid in the tubules at the macula densa (MDFLW) which is the input to Block 57. Blocks 57, 58, and 59 calculate the sensitivity of this feedback mechanism, and the sensitivity control factor is RNAUGN in Block 58. Blocks 60 and 61 calculate the time constant of development of this feedback in the arterioles after any change in rate of flow (MDFLW) at the macula densa. The time constant of this feedback response is RNAGTC in Block 60.
    RNAUG1T = (MDFLW-1{L_per_minute})*RNAUGN+1{dimensionless};
    // value: KD62 and KD63: The value RNAULL is the lower limit to the autoregulatory response (RNAUG1) as set by Block 62. RNAUUL is the upper limit, as set by Block 63.
    RNAUG1 = sel
      case RNAUG1T < RNAULL:
        RNAULL;
      case RNAUG1T > RNAUUL:
        RNAUUL;
      otherwise:
        RNAUG1T;
    endsel;
    // value: KD64: Calculation of an autoregulatory feedback factor that affects the degree of constriction of both afferent and efferent arterioles (RNAUG2) which is the output of Block 64. This feedback effect, and the resistance of the afferent and efferent arterioles, increases in proportion to the calculation from these blocks and in response to the flow rate of fluid in the tubules at the macula densa (MDFLW) which is the input to Block 57.
    RNAUG2 = RNAUG1-RNAUG3;
    // value: KD65, KD66, and KD67: Block 65, 66, and 67 calculate obliterative adaptation of this feedback response in case such as this does occur. The sensitivity of this, RNAUAD, in Block 66 is set at zero because many persons believe there is no such decay of this feedback response. Yet others have postulated such a feedback response, in which case RNAUAD would then become the factor that sets the time constant of the loss of the feedback response with time. The output of this total system from Block 14 is RNAUG2. NB - REMOVED DAMPING FROM KD57-KD61!!!!!!!!!
    ode(RNAUG3, time) = (RNAUG2-1{dimensionless})*RNAUAD;
  enddef;
  // INPUT CONNECTIONS
  def map between renal_autoregulatory_feedback_factor and proximal_tubular_and_macula_densa_flow for
    vars MDFLW and MDFLW;
  enddef;
  def map between renal_autoregulatory_feedback_factor and kidney for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between renal_autoregulatory_feedback_factor and parameter_values for
    vars RNAUGN and RNAUGN;
    vars RNAULL and RNAULL;
    vars RNAUUL and RNAUUL;
    vars RNAUAD and RNAUAD;
  enddef;
  // ========================================	AFFERENT ARTERIAL RESISTANCE	=============================================

  // value: Containment grouping component for "autonomic_effect_on_AAR", "angiotensin_effect_on_AAR", "AAR_calculation" and "atrial_natriuretic_peptide_effect_on_AAR".
  def comp afferent_arterial_resistance as
  enddef;
  // ========================================	AUTONOMIC EFFECT ON AFFERENT RESISTANCE	=============================================

  // value: KD10, KD11, KD12, and KD13: Calculation of the effect of autonomic stimulation (AUM) on afferent arteriolar resistance (AUMK). A sensitivity controller for this is in Block 11 (ARF). A limit is in Block 13 equal to 0.8.
  def comp autonomic_effect_on_AAR as
    // Inputs from other components
    var AUM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AUMK: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ARF: dimensionless {priv: none, pub: in};
    // Internal variables
    var AUMKT: dimensionless {priv: none, pub: none};
    // value: KD10, KD11, KD12, and KD13: Calculation of the effect of autonomic stimulation (AUM) on afferent arteriolar resistance (AUMK). A sensitivity controller for this is in Block 11 (ARF). A limit is in Block 13 equal to 0.8.
    AUMKT = (AUM-1{dimensionless})*ARF+1{dimensionless};
    // value: KD10, KD11, KD12, and KD13: Calculation of the effect of autonomic stimulation (AUM) on afferent arteriolar resistance (AUMK). A sensitivity controller for this is in Block 11 (ARF). A limit is in Block 13 equal to 0.8.
    AUMK = sel
      case AUMKT < 0.8{dimensionless}:
        0.8{dimensionless};
      otherwise:
        AUMKT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_effect_on_AAR and kidney for
    vars AUM and AUM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_effect_on_AAR and parameter_values for
    vars ARF and ARF;
  enddef;
  // ========================================	ANGIOTENSIN EFFECT ON AFFERENT RESISTANCE	=============================================

  // value: KD3, KD7 and KD8: Calculation of a temporary value for the effect of angiotensin on the afferent arteriolar resistance (ANMAR). The angiotensin-related factors that affect the afferent arteriolar resistance are an angiotensin multiplier factor (ANM), and an angiotensin multiplier sensitivity controller (ANMAM).
  def comp angiotensin_effect_on_AAR as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANMAR: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMAM: dimensionless {priv: none, pub: in};
    var ANMARL: dimensionless {priv: none, pub: in};
    // Internal variables
    var ANMAR1: dimensionless {priv: none, pub: none};
    // value: KD3, KD7 and KD8: Calculation of a temporary value for the effect of angiotensin on the afferent arteriolar resistance (ANMAR). The angiotensin-related factors that affect the afferent arteriolar resistance are an angiotensin multiplier factor (ANM), and an angiotensin multiplier sensitivity controller (ANMAM).
    ANMAR1 = (ANM-1{dimensionless})*ANMAM+1{dimensionless};
    // value: KD3, KD7 and KD8: Calculation of a temporary value for the effect of angiotensin on the afferent arteriolar resistance (ANMAR). The angiotensin-related factors that affect the afferent arteriolar resistance are an angiotensin multiplier factor (ANM), and an angiotensin multiplier sensitivity controller (ANMAM).
    ANMAR = sel
      case ANMAR1 < ANMARL:
        ANMARL;
      otherwise:
        ANMAR1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_effect_on_AAR and kidney for
    vars ANM and ANM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_effect_on_AAR and parameter_values for
    vars ANMAM and ANMAM;
    vars ANMARL and ANMARL;
  enddef;
  // ========================================	AFFERENT ARTERIAL RESISTANCE CALCULATION		=============================================

  // value: KD9: Calculation of a temporary value for the afferent arteriolar resistance (AAR1), except for the effect of atrial natriuretic peptide on this resistance which is calculated later. The factors that affect the afferent arteriolar resistance are the angiotensin multiplier on afferent arterioles (ANMAR), an autonomic multiplier factor for nervous control of afferent resistance (AUMK), an autoregulatory feedback multiplier effect on afferent arteriolar resistance (RNAUG2), a myogenic autoregulation factor (myogrs), and a basic afferent arteriolar resistance factor (AAR1) which allows for intrarenal alterations.
  def comp AAR_calculation as
    // Inputs from other components
    var PAMKRN: dimensionless {priv: none, pub: in};
    var AUMK: dimensionless {priv: none, pub: in};
    var RNAUG2: dimensionless {priv: none, pub: in};
    var ANMAR: dimensionless {priv: none, pub: in};
    var MYOGRS: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AAR1: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var AARK: mmHg_minute_per_L {priv: none, pub: in};
    // value: KD9: Calculation of a temporary value for the afferent arteriolar resistance (AAR1), except for the effect of atrial natriuretic peptide on this resistance which is calculated later. The factors that affect the afferent arteriolar resistance are the angiotensin multiplier on afferent arterioles (ANMAR), an autonomic multiplier factor for nervous control of afferent resistance (AUMK), an autoregulatory feedback multiplier effect on afferent arteriolar resistance (RNAUG2), a myogenic autoregulation factor (myogrs), and a basic afferent arteriolar resistance factor (AAR1) which allows for intrarenal alterations.
    AAR1 = AARK*PAMKRN*AUMK*RNAUG2*ANMAR*40{dimensionless}*MYOGRS;
  enddef;
  // INPUT CONNECTIONS
  def map between AAR_calculation and angiotensin_effect_on_AAR for
    vars ANMAR and ANMAR;
  enddef;
  def map between AAR_calculation and kidney for
    vars MYOGRS and MYOGRS;
    vars PAMKRN and PAMKRN;
  enddef;
  def map between AAR_calculation and renal_autoregulatory_feedback_factor for
    vars RNAUG2 and RNAUG2;
  enddef;
  def map between AAR_calculation and autonomic_effect_on_AAR for
    vars AUMK and AUMK;
  enddef;
  // PARAMETER CONNECTIONS
  def map between AAR_calculation and parameter_values for
    vars AARK and AARK;
  enddef;
  // ========================================	ATRIAL NATRIURETIC PEPTIDE EFFECT ON AFFERENT RESISTANCE	=============================================

  // value: KD21, KD22, and KD23: Calculation of the effect of circulating atrial natriuretic peptide on afferent arteriolar resistance (AAR). The input to this sequence is ANPX which is derived from the atrial natriuretic peptide section diagram. Sensitivity is determined by ANPXAF, and the lower limit of AAR is set by Block 23 to equal AARLL.
  def comp atrial_natriuretic_peptide_effect_on_AAR as
    // Inputs from other components
    var AAR1: mmHg_minute_per_L {priv: none, pub: in};
    var ANPX: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AAR: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var ANPXAF: mmHg_minute_per_L {priv: none, pub: in};
    var AARLL: mmHg_minute_per_L {priv: none, pub: in};
    // Internal variables
    var AART: mmHg_minute_per_L {priv: none, pub: none};
    // value: KD21 and KD22: Calculation of the effect of circulating atrial natriuretic peptide on afferent arteriolar resistance (AAR). The input to this sequence is ANPX which is derived from the atrial natriuretic peptide section diagram. Sensitivity is determined by ANPXAF.
    AART = AAR1-ANPX*ANPXAF+ANPXAF;
    // value: KD23: The lower limit of AAR is set by Block 23 to equal AARLL.
    AAR = sel
      case AART < AARLL:
        AARLL;
      otherwise:
        AART;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between atrial_natriuretic_peptide_effect_on_AAR and AAR_calculation for
    vars AAR1 and AAR1;
  enddef;
  def map between atrial_natriuretic_peptide_effect_on_AAR and kidney for
    vars ANPX and ANPX;
  enddef;
  // PARAMETER CONNECTIONS
  def map between atrial_natriuretic_peptide_effect_on_AAR and parameter_values for
    vars ANPXAF and ANPXAF;
    vars AARLL and AARLL;
  enddef;
  // ========================================	EFFERENT ARTERIAL RESISTANCE	=============================================

  // value: Containment grouping component for "autonomic_effect_on_EAR", "angiotensin_effect_on_EAR", "effect_of_renal_autoregulatory_feedback_on_EAR" and "EAR_calculation".
  def comp efferent_arterial_resistance as
  enddef;
  // ========================================	AUTONOMIC EFFECT ON EFFERENT RESISTANCE	=============================================

  // value: KD14, KD15, and KD16: Calculation from AUMK (the output of Block 13), the effect of autonomic stimulation on efferent arteriolar resistance. The output of Block 16 multiplies efferent arteriolar resistance in Block 6.
  def comp autonomic_effect_on_EAR as
    // Inputs from other components
    var AUMK: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var AUMK2: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var AUMK1: dimensionless {priv: none, pub: in};
    // value: KD14, KD15, and KD16: Calculation from AUMK (the output of Block 13), the effect of autonomic stimulation on efferent arteriolar resistance. The output of Block 16 multiplies efferent arteriolar resistance in Block 6.
    AUMK2 = (AUMK-1{dimensionless})*AUMK1+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between autonomic_effect_on_EAR and autonomic_effect_on_AAR for
    vars AUMK and AUMK;
  enddef;
  // PARAMETER CONNECTIONS
  def map between autonomic_effect_on_EAR and parameter_values for
    vars AUMK1 and AUMK1;
  enddef;
  // ========================================	ANGIOTENSIN EFFECT ON EFFERENT RESISTANCE	=============================================

  // value: KD3, KD4 and KD5: Calculation of a temporary value for the effect of angiotensin on the efferent arteriolar resistance (ANMER). The angiotensin-related factors that affect the efferent arteriolar resistance are an angiotensin multiplier (ANM), and a sensitivity control for the effect of angiotensin on the efferent arterioles (ANMEM).
  def comp angiotensin_effect_on_EAR as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var ANMER: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMEM: dimensionless {priv: none, pub: in};
    // value: KD3, KD4 and KD5: Calculation of a temporary value for the effect of angiotensin on the efferent arteriolar resistance (ANMER). The angiotensin-related factors that affect the efferent arteriolar resistance are an angiotensin multiplier (ANM), and a sensitivity control for the effect of angiotensin on the efferent arterioles (ANMEM).
    ANMER = (ANM-1{dimensionless})*ANMEM+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_effect_on_EAR and kidney for
    vars ANM and ANM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_effect_on_EAR and parameter_values for
    vars ANMEM and ANMEM;
  enddef;
  // ==========================	EFFECT OF RENAL AUTOREGULATORY FEEDBACK ON EFFERENT RESISTANCE	===============================

  // value: KD17, KD18, and KD19: Sensitivity control of the renal autoregulatory feedback on efferent arteriolar resistance. The sensitivity is controlled by (EFAFR) in Block 18.
  def comp effect_of_renal_autoregulatory_feedback_on_EAR as
    // Inputs from other components
    var RNAUG2: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RNAUG4: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var EFAFR: dimensionless {priv: none, pub: in};
    // value: KD17, KD18, and KD19: Sensitivity control of the renal autoregulatory feedback on efferent arteriolar resistance. The sensitivity is controlled by (EFAFR) in Block 18.
    RNAUG4 = (RNAUG2-1{dimensionless})*EFAFR+1{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_renal_autoregulatory_feedback_on_EAR and renal_autoregulatory_feedback_factor for
    vars RNAUG2 and RNAUG2;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_renal_autoregulatory_feedback_on_EAR and parameter_values for
    vars EFAFR and EFAFR;
  enddef;
  // ========================================	EFFERENT ARTERIAL RESISTANCE CALCULATION		=============================================

  // value: KD6 and KD6A: Calculation of the efferent arteriolar resistance of the kidneys (EAR). The various factors that affect this are: the angiotensin multiplier on efferent arterioles (ANMER), the basic efferent arteriolar resistance when all other factors are normal (EARK), a multiplier factor from Block KD19 that determines feedback from the renal autoregulatory mechanism, a multiplier factor from Block 16 that determines autonomic nervous signal control of efferent arteriolar resistance, and a factor (MYOGRS) for any myogenic autoregulation that might occur in the efferent arterioles. Block KD6A sets the lower limit for the efferent arteriolar resistance (EAR) at a level equal to the factor (EARLL).
  def comp EAR_calculation as
    // Inputs from other components
    var ANMER: dimensionless {priv: none, pub: in};
    var AUMK2: dimensionless {priv: none, pub: in};
    var MYOGRS: dimensionless {priv: none, pub: in};
    var RNAUG4: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var EAR: mmHg_minute_per_L {priv: none, pub: out};
    // Parameters from parameter_file
    var EARK: mmHg_minute_per_L {priv: none, pub: in};
    var EARLL: mmHg_minute_per_L {priv: none, pub: in};
    // Internal variables
    var EAR1: mmHg_minute_per_L {priv: none, pub: none};
    // value: KD6: Calculation of the efferent arteriolar resistance of the kidneys (EAR). The various factors that affect this are: the angiotensin multiplier on efferent arterioles (ANMER), the basic efferent arteriolar resistance when all other factors are normal (EARK), a multiplier factor from Block KD19 that determines feedback from the renal autoregulatory mechanism, a multiplier factor from Block 16 that determines autonomic nervous signal control of efferent arteriolar resistance, and a factor (MYOGRS) for any myogenic autoregulation that might occur in the efferent arterioles.
    EAR1 = 43.333{dimensionless}*EARK*ANMER*RNAUG4*MYOGRS*AUMK2;
    // value: KD6A: Block KD6A sets the lower limit for the efferent arteriolar resistance (EAR) at a level equal to the factor (EARLL).
    EAR = sel
      case EAR1 < EARLL:
        EARLL;
      otherwise:
        EAR1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between EAR_calculation and angiotensin_effect_on_EAR for
    vars ANMER and ANMER;
  enddef;
  def map between EAR_calculation and autonomic_effect_on_EAR for
    vars AUMK2 and AUMK2;
  enddef;
  def map between EAR_calculation and kidney for
    vars MYOGRS and MYOGRS;
  enddef;
  def map between EAR_calculation and effect_of_renal_autoregulatory_feedback_on_EAR for
    vars RNAUG4 and RNAUG4;
  enddef;
  // PARAMETER CONNECTIONS
  def map between EAR_calculation and parameter_values for
    vars EARK and EARK;
    vars EARLL and EARLL;
  enddef;
  // ========================================	TOTAL RENAL RESISTANCE	=============================================

  // value: KD20: Calculation of the total renal resistance (RR) by adding efferent arteriolar resistance (EAR) to afferent resistance (AAR).
  def comp total_renal_resistance as
    // Inputs from other components
    var AAR: mmHg_minute_per_L {priv: none, pub: in};
    var EAR: mmHg_minute_per_L {priv: none, pub: in};
    // Outputs to other components
    var RR: mmHg_minute_per_L {priv: none, pub: out};
    // value: KD20: Calculation of the total renal resistance (RR) by adding efferent arteriolar resistance (EAR) to afferent resistance (AAR).
    RR = AAR+EAR;
  enddef;
  // INPUT CONNECTIONS
  def map between total_renal_resistance and EAR_calculation for
    vars EAR and EAR;
  enddef;
  def map between total_renal_resistance and atrial_natriuretic_peptide_effect_on_AAR for
    vars AAR and AAR;
  enddef;
  // ========================================	NORMAL RENAL BLOOD FLOW	=============================================

  // value: KD24A: Renal perfusion pressure (PAR) divided by renal resistance (RR) equals the renal blood flow for normal kidneys (RFN).
  def comp normal_renal_blood_flow as
    // Inputs from other components
    var RR: mmHg_minute_per_L {priv: none, pub: in};
    var PAR: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RFN: L_per_minute {priv: none, pub: out};
    // value: KD24A: Renal perfusion pressure (PAR) divided by renal resistance (RR) equals the renal blood flow for normal kidneys (RFN).
    RFN = PAR/RR;
  enddef;
  // INPUT CONNECTIONS
  def map between normal_renal_blood_flow and total_renal_resistance for
    vars RR and RR;
  enddef;
  def map between normal_renal_blood_flow and perfusion_pressure for
    vars PAR and PAR;
  enddef;
  // ========================================	ACTUAL RENAL BLOOD FLOW	=============================================

  // value: KD73: Calculation of the actual renal blood flow (RBF) by multiplying the normalized renal blood flow (RFN) for two normal kidneys times the fraction of normal kidney mass present in the body (REK).
  def comp actual_renal_blood_flow as
    // Inputs from other components
    var RFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var RBF: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    // value: KD73: Calculation of the actual renal blood flow (RBF) by multiplying the normalized renal blood flow (RFN) for two normal kidneys times the fraction of normal kidney mass present in the body (REK).
    RBF = REK*RFN;
  enddef;
  // INPUT CONNECTIONS
  def map between actual_renal_blood_flow and normal_renal_blood_flow for
    vars RFN and RFN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_renal_blood_flow and parameter_values for
    vars REK and REK;
  enddef;
  // ========================================	GLOMERULAR CAPILLARIES	=============================================

  // value: Containment grouping component for "glomerular_colloid_osmotic_pressure", "glomerular_pressure", "glomerular_filtration_rate".
  def comp glomerular_capillaries as
  enddef;
  // ========================================	GLOMERULAR COLLOID OSMOTIC PRESSURE	=============================================

  // value: KD68, KD69, KD70, KD71, KD71A, KD72, KD72A, and KD72B: Calculation of the colloid osmotic pressure of the proteins in the plasma of the fluid flowing through the glomerular capillaries (GLPC). This calculation is based on four input factors, fractional hematocrit (HM1) in Block 68, normalized rate of blood flow (RFN) in Block 69, normalized rate of flow through the two kidneys (GFN) in Block 70, and plasma protein concentration in the blood elsewhere in the body (PPC) in Block 72A. The output of Block 72A is damped in Block 72B by the damping factor GPPD; this is to prevent oscillation in the feedback circuit. NB - REMOVED DAMPING FROM KD72-KD72B!!!!
  def comp glomerular_colloid_osmotic_pressure as
    // Inputs from other components
    var HM1: dimensionless {priv: none, pub: in};
    var RFN: L_per_minute {priv: none, pub: in};
    var GFN: L_per_minute {priv: none, pub: in};
    var PPC: mmHg {priv: none, pub: in};
    // Outputs to other components
    var GLPC: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var GPPD: dimensionless {priv: none, pub: in};
    var GLPCA: mmHg {priv: none, pub: in};
    // Internal variables
    var EFAFPR: dimensionless {priv: none, pub: none};
    var EFAFPR1: dimensionless {priv: none, pub: none};
    // value: KD68, KD69, KD70, KD71, KD71A, KD72, KD72A, and KD72B: Calculation of the colloid osmotic pressure of the proteins in the plasma of the fluid flowing through the glomerular capillaries (GLPC). This calculation is based on four input factors, fractional hematocrit (HM1) in Block 68, normalized rate of blood flow (RFN) in Block 69, normalized rate of flow through the two kidneys (GFN) in Block 70, and plasma protein concentration in the blood elsewhere in the body (PPC) in Block 72A. The output of Block 72A is damped in Block 72B by the damping factor GPPD; this is to prevent oscillation in the feedback circuit. NB - REMOVED DAMPING FROM KD72-KD72B!!!!
    EFAFPR1 = RFN*(1{dimensionless}-HM1)/(RFN*(1{dimensionless}-HM1)-GFN);
    // value: KD68, KD69, KD70, KD71, KD71A, KD72, KD72A, and KD72B: Calculation of the colloid osmotic pressure of the proteins in the plasma of the fluid flowing through the glomerular capillaries (GLPC). This calculation is based on four input factors, fractional hematocrit (HM1) in Block 68, normalized rate of blood flow (RFN) in Block 69, normalized rate of flow through the two kidneys (GFN) in Block 70, and plasma protein concentration in the blood elsewhere in the body (PPC) in Block 72A. The output of Block 72A is damped in Block 72B by the damping factor GPPD; this is to prevent oscillation in the feedback circuit. NB - REMOVED DAMPING FROM KD72-KD72B!!!!
    EFAFPR = sel
      case EFAFPR1 < 1{dimensionless}:
        1{dimensionless};
      otherwise:
        EFAFPR1;
    endsel;
    // value: KD68, KD69, KD70, KD71, KD71A, KD72, KD72A, and KD72B: Calculation of the colloid osmotic pressure of the proteins in the plasma of the fluid flowing through the glomerular capillaries (GLPC). This calculation is based on four input factors, fractional hematocrit (HM1) in Block 68, normalized rate of blood flow (RFN) in Block 69, normalized rate of flow through the two kidneys (GFN) in Block 70, and plasma protein concentration in the blood elsewhere in the body (PPC) in Block 72A. The output of Block 72A is damped in Block 72B by the damping factor GPPD; this is to prevent oscillation in the feedback circuit. NB - REMOVED DAMPING FROM KD72-KD72B!!!!
    GLPC = sel
      case GLPCA > 0{mmHg}:
        pow(EFAFPR, 1.35{dimensionless})*PPC*0.98{dimensionless};
      otherwise:
        PPC+4{mmHg};
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between glomerular_colloid_osmotic_pressure and kidney for
    vars HM1 and HM1;
    vars PPC and PPC;
  enddef;
  def map between glomerular_colloid_osmotic_pressure and normal_renal_blood_flow for
    vars RFN and RFN;
  enddef;
  def map between glomerular_colloid_osmotic_pressure and glomerular_filtration_rate for
    vars GFN and GFN;
    vars GLPC and GLPC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between glomerular_colloid_osmotic_pressure and parameter_values for
    vars GPPD and GPPD;
    vars GLPCA and GLPCA;
  enddef;
  // ========================================	GLOMERULAR PRESSURE		=============================================

  // value: KD24: Arterial pressure drop (APD) in the renal arteries and afferent arterioles before the blood gets to the glomerulus equals RFN times efferent arterial resistance (AAR). KD25: Calculation of glomerular pressure (GLP) by subtracting afferent pressure drop (APD) from the input pressure to the kidney (PAR).
  def comp glomerular_pressure as
    // Inputs from other components
    var AAR: mmHg_minute_per_L {priv: none, pub: in};
    var PAR: mmHg {priv: none, pub: in};
    var RFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var GLP: mmHg {priv: none, pub: out};
    // Internal variables
    var APD: mmHg {priv: none, pub: none};
    // value: KD24: Arterial pressure drop (APD) in the renal arteries and afferent arterioles before the blood gets to the glomerulus equals RFN times efferent arterial resistance (AAR).
    APD = AAR*RFN;
    // value: KD25: Calculation of glomerular pressure (GLP) by subtracting afferent pressure drop (APD) from the input pressure to the kidney (PAR).
    GLP = PAR-APD;
  enddef;
  // INPUT CONNECTIONS
  def map between glomerular_pressure and atrial_natriuretic_peptide_effect_on_AAR for
    vars AAR and AAR;
  enddef;
  def map between glomerular_pressure and perfusion_pressure for
    vars PAR and PAR;
  enddef;
  def map between glomerular_pressure and normal_renal_blood_flow for
    vars RFN and RFN;
  enddef;
  // ========================================	GLOMERULAR FILTRATION RATE	=============================================

  // value: KD26: Calculation of average filtration pressure through the glomerular capillary walls (PFL) by subtracting intrarenal pressure (PXTP) and colloid osmotic pressure of the glomerular plasma (GLPC) from the average glomerular pressure (GLP). KD27 and KD28: Calculation of the normalized glomerular filtration rate (GFN) if both kidneys are fully functional. This is calculated by multiplying the pressure drop across the glomerular capillary membrane (PFL) times the glomerular filtration coefficient (GFLC). The lower limit for glomerular filtration is set in Block 28 by the value GFNLL. NB - DAMPING REMOVED FROM KD27!!! KD51: Calculation of the actual glomerular filtration rate (GFR) by multiplying the rate that would be true if both kidneys were totally intact (GFN) times the fraction of normal kidney mass actually functioning (REK).
  def comp glomerular_filtration_rate as
    // Inputs from other components
    var GLP: mmHg {priv: none, pub: in};
    var GLPC: mmHg {priv: none, pub: in};
    // Outputs to other components
    var GFN: L_per_minute {priv: none, pub: out};
    var GFR: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var PXTP: mmHg {priv: none, pub: in};
    var GFLC: L_per_minute_per_mmHg {priv: none, pub: in};
    var GFNLL: L_per_minute {priv: none, pub: in};
    var REK: dimensionless {priv: none, pub: in};
    // Internal variables
    var PFL: mmHg {priv: none, pub: none};
    var GFN1: L_per_minute {priv: none, pub: none};
    // value: KD26: Calculation of average filtration pressure through the glomerular capillary walls (PFL) by subtracting intrarenal pressure (PXTP) and colloid osmotic pressure of the glomerular plasma (GLPC) from the average glomerular pressure (GLP).
    PFL = GLP-GLPC-PXTP;
    // value: KD27: Calculation of the normalized glomerular filtration rate (GFN) if both kidneys are fully functional. This is calculated by multiplying the pressure drop across the glomerular capillary membrane (PFL) times the glomerular filtration coefficient (GFLC). NB - DAMPING REMOVED FROM KD27!!!
    GFN1 = PFL*GFLC;
    // value: KD28: The lower limit for glomerular filtration is set in Block 28 by the value GFNLL.
    GFN = sel
      case GFN1 < GFNLL:
        GFNLL;
      otherwise:
        GFN1;
    endsel;
    // value: KD51: Calculation of the actual glomerular filtration rate (GFR) by multiplying the rate that would be true if both kidneys were totally intact (GFN) times the fraction of normal kidney mass actually functioning (REK).
    GFR = GFN*REK;
  enddef;
  // INPUT CONNECTIONS
  def map between glomerular_filtration_rate and glomerular_pressure for
    vars GLP and GLP;
  enddef;
  // PARAMETER CONNECTIONS
  def map between glomerular_filtration_rate and parameter_values for
    vars PXTP and PXTP;
    vars GFLC and GFLC;
    vars GFNLL and GFNLL;
    vars REK and REK;
  enddef;
  // ========================================	PROXIMAL TUBULAR AND MACULA DENSA FLOW	=============================================

  // value: KD29: Calculation of normalized rate of flow of fluid out of the proximal tubules (PTFL) making the assumption that this is directly proportional to the normalized glomerular filtration rate (GFN). The value (1.0) is considered to be the normal flow of fluid out of the proximal tubules when all functions of the kidneys are normal. KD30, KD31, and KD32: This is a sensitivity controller to determine the normalized rate of flow of tubular fluid at the macula densa level in the kidneys (MDFLW) when the normalized rate of flow out of the proximal tubules (PTFL) changes from the normalized mean value of 1. The multiplier value MDFL1 in Block 31 determines how many times as much the normalized value for macula densa flow (MDFLW) changes with respect to change in proximal tubular outflow (PTFL). KD33: This block sets a lower limit of macula densa flow (MDFLW) equal to zero.
  def comp proximal_tubular_and_macula_densa_flow as
    // Inputs from other components
    var GFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var MDFLW: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var MDFL1: dimensionless {priv: none, pub: in};
    // Internal variables
    var PTFL: L_per_minute {priv: none, pub: none};
    var MDFLWT: L_per_minute {priv: none, pub: none};
    // value: KD29: Calculation of normalized rate of flow of fluid out of the proximal tubules (PTFL) making the assumption that this is directly proportional to the normalized glomerular filtration rate (GFN). The value (1.0) is considered to be the normal flow of fluid out of the proximal tubules when all functions of the kidneys are normal.
    PTFL = GFN*8{dimensionless};
    // value: KD30, KD31, and KD32: This is a sensitivity controller to determine the normalized rate of flow of tubular fluid at the macula densa level in the kidneys (MDFLW) when the normalized rate of flow out of the proximal tubules (PTFL) changes from the normalized mean value of 1. The multiplier value MDFL1 in Block 31 determines how many times as much the normalized value for macula densa flow (MDFLW) changes with respect to change in proximal tubular outflow (PTFL).
    MDFLWT = (PTFL-1{L_per_minute})*MDFL1+1{L_per_minute};
    // value: KD33: This block sets a lower limit of macula densa flow (MDFLW) equal to zero.
    MDFLW = sel
      case MDFLWT < 0{L_per_minute}:
        0{L_per_minute};
      otherwise:
        MDFLWT;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between proximal_tubular_and_macula_densa_flow and glomerular_filtration_rate for
    vars GFN and GFN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between proximal_tubular_and_macula_densa_flow and parameter_values for
    vars MDFL1 and MDFL1;
  enddef;
  // ========================================	RENAL TISSUE OSMOTIC PRESSURE	=============================================

  // value: KD79, KD80, and KD81: Calculation of the renal tissue fluid colloid osmotic pressure (RTSPPC) based on the average colloid osmotic pressure of the plasma in the glomerulus (GLPC) times a factor caused by reabsorption of fluid into the plasma flowing through the capillaries surrounding the tubules (RTPPR), and minus a factor resulting from a protein differential between the capillaries and the tissue spaces (RTPPRS). The lower limit of RTSPPC is set to 1.0 by Block 81.
  def comp renal_tissue_osmotic_pressure as
    // Inputs from other components
    var GLPC: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RTSPPC: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var RTPPR: dimensionless {priv: none, pub: in};
    var RTPPRS: mmHg {priv: none, pub: in};
    // Internal variables
    var RTSPPC1: mmHg {priv: none, pub: none};
    // value: KD79 and KD80: Calculation of the renal tissue fluid colloid osmotic pressure (RTSPPC) based on the average colloid osmotic pressure of the plasma in the glomerulus (GLPC) times a factor caused by reabsorption of fluid into the plasma flowing through the capillaries surrounding the tubules (RTPPR), and minus a factor resulting from a protein differential between the capillaries and the tissue spaces (RTPPRS).
    RTSPPC1 = GLPC*RTPPR-RTPPRS;
    // value: KD81: The lower limit of RTSPPC is set to 1.0 by Block 81.
    RTSPPC = sel
      case RTSPPC1 < 1{mmHg}:
        1{mmHg};
      otherwise:
        RTSPPC1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between renal_tissue_osmotic_pressure and glomerular_colloid_osmotic_pressure for
    vars GLPC and GLPC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between renal_tissue_osmotic_pressure and parameter_values for
    vars RTPPR and RTPPR;
    vars RTPPRS and RTPPRS;
  enddef;
  // ========================================	UREA HANDLING	=============================================

  // value: Containment grouping component for "plasma_urea_concentration", "glomerular_urea_concentration".
  def comp urea_handling as
  enddef;
  // ========================================	GLOMERULAR UREA CONCENTRATION	=============================================

  // value: KD53 and KD54: Calculation of the concentration of urea in the glomerular filtrate and also in the plasma (PLURC). Subtraction in Block 53 of the urinary output of urea (UROD) from rate of formation of urea in the body (URFORM) and the result integrated in Block 54 calculates the total urea in the plasma and other body fluids (PLUR).
  def comp glomerular_urea_concentration as
    // Inputs from other components
    var UROD: mOsm_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var PLUR: mOsm {init: 159.549, priv: none, pub: out};
    // Parameters from parameter_file
    var URFORM: mOsm_per_minute {priv: none, pub: in};
    // value: KD53 and KD54: Calculation of the concentration of urea in the glomerular filtrate and also in the plasma (PLURC). Subtraction in Block 53 of the urinary output of urea (UROD) from rate of formation of urea in the body (URFORM) and the result integrated in Block 54 calculates the total urea in the plasma and other body fluids (PLUR).
    ode(PLUR, time) = URFORM-UROD;
  enddef;
  // INPUT CONNECTIONS
  def map between glomerular_urea_concentration and actual_urea_excretion_rate for
    vars UROD and UROD;
  enddef;
  def map between glomerular_urea_concentration and kidney for
    vars time and time;
  enddef;
  // PARAMETER CONNECTIONS
  def map between glomerular_urea_concentration and parameter_values for
    vars URFORM and URFORM;
  enddef;
  // ========================================	PLASMA UREA CONCENTRATION		=============================================

  // value: KD55: Calculation of the concentration of urea in the glomerular filtrate and also in the plasma (PLURC).
  def comp plasma_urea_concentration as
    // Inputs from other components
    var PLUR: mOsm {priv: none, pub: in};
    var VTW: litre {priv: none, pub: in};
    // Outputs to other components
    var PLURC: mOsm_per_litre {priv: none, pub: out};
    // value: KD55: Calculation of the concentration of urea in the glomerular filtrate and also in the plasma (PLURC).
    PLURC = PLUR/VTW;
  enddef;
  // INPUT CONNECTIONS
  def map between plasma_urea_concentration and glomerular_urea_concentration for
    vars PLUR and PLUR;
  enddef;
  def map between plasma_urea_concentration and kidney for
    vars VTW and VTW;
  enddef;
  // ========================================	RENAL PERITUBULAR CAPILLARIES		=============================================

  // value: Containment grouping component for "peritubular_capillary_pressure" and "peritubular_capillary_reabsorption_factor".
  def comp renal_peritubular_capillaries as
  enddef;
  // ========================================	PERITUBULAR CAPILLARY PRESSURE		=============================================

  // value: KD74, KD75, KD76, and KD77: Calculation of renal peritubular capillary pressure. Blocks KD74, KD75 and KD76 are a sensitivity control to determine the effect of changes in RFN on the calculation. In Block KD77, the output of Block KD76 is multiplied by a resistance from the glomerulus back to the large veins (RVRS).
  def comp peritubular_capillary_pressure as
    // Inputs from other components
    var RFN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var RCPRS: mmHg {priv: none, pub: out};
    // Parameters from parameter_file
    var RFABX: dimensionless {priv: none, pub: in};
    var RVRS: mmHg_minute_per_L {priv: none, pub: in};
    // value: KD74, KD75, KD76, and KD77: Calculation of renal peritubular capillary pressure. Blocks KD74, KD75 and KD76 are a sensitivity control to determine the effect of changes in RFN on the calculation. In Block KD77, the output of Block KD76 is multiplied by a resistance from the glomerulus back to the large veins (RVRS).
    RCPRS = ((RFN-1.2{L_per_minute})*RFABX+1.2{L_per_minute})*RVRS;
  enddef;
  // INPUT CONNECTIONS
  def map between peritubular_capillary_pressure and normal_renal_blood_flow for
    vars RFN and RFN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between peritubular_capillary_pressure and parameter_values for
    vars RFABX and RFABX;
    vars RVRS and RVRS;
  enddef;
  // ========================================	PERITUBULAR CAPILLARY REABSORPTION FACTOR	=============================================

  // value: KD78: The pressure difference for absorption of fluid into the peritubular capillaries (RABSPR) is equal to the average colloid osmotic pressure in the peritubular capillaries (RABSPR), which is equal to the average colloid osmotic pressure in the glomerulus (GLPC), minus renal tissue fluid colloid osmotic pressure (RTSPPC), minus the renal peritubular capillary pressure (RCPRS), and plus the renal tissue fluid pressure (RTSPRS). KD82: A temporary distal tubular reabsorption factor (RFAB1) is calculated from the peritubular capillary absorptive pressure difference (RABSPR) times the renal peritubular capillary reabsorption coefficient (RABSC). KD83: This is a damping circuit to calculate the reabsorption factor (RFAB). The damping coefficient is RFABDP. The purpose of this is to prevent oscillation in the system. NB - REMOVED DAMPING FROM KD83!! KD84, KD85, KD86, and KD87: Blocks 84, 85, and 86 are a sensitivity control for determining the effect of the reabsorption factor RFAB on distal tubule reabsorption (RFABD). The sensitivity is controlled by the factor in Block 85, RFABDM. Block 87 prevents the value of RFABD from falling below a value of .0001.
  def comp peritubular_capillary_reabsorption_factor as
    // Inputs from other components
    var RCPRS: mmHg {priv: none, pub: in};
    var GLPC: mmHg {priv: none, pub: in};
    var RTSPPC: mmHg {priv: none, pub: in};
    // Outputs to other components
    var RFABD: dimensionless {priv: none, pub: out};
    // Parameters from parameter_file
    var RTSPRS: mmHg {priv: none, pub: in};
    var RABSC: per_mmHg {priv: none, pub: in};
    var RFABDP: dimensionless {priv: none, pub: in};
    var RFABDM: dimensionless {priv: none, pub: in};
    // Internal variables
    var RABSPR: mmHg {priv: none, pub: none};
    var RFAB1: dimensionless {priv: none, pub: none};
    var RFAB: dimensionless {priv: none, pub: none};
    var RFABD1: dimensionless {priv: none, pub: none};
    // value: KD78: The pressure difference for absorption of fluid into the peritubular capillaries (RABSPR) is equal to the average colloid osmotic pressure in the peritubular capillaries (RABSPR), which is equal to the average colloid osmotic pressure in the glomerulus (GLPC), minus renal tissue fluid colloid osmotic pressure (RTSPPC), minus the renal peritubular capillary pressure (RCPRS), and plus the renal tissue fluid pressure (RTSPRS).
    RABSPR = GLPC+RTSPRS-RCPRS-RTSPPC;
    // value: KD82: A temporary distal tubular reabsorption factor (RFAB1) is calculated from the peritubular capillary absorptive pressure difference (RABSPR) times the renal peritubular capillary reabsorption coefficient (RABSC).
    RFAB1 = RABSPR*RABSC;
    // value: KD83: This is a damping circuit to calculate the reabsorption factor (RFAB). The damping coefficient is RFABDP. The purpose of this is to prevent oscillation in the system. NB - REMOVED DAMPING FROM KD83!!
    RFAB = RFAB1;
    // value: KD84, KD85, and KD86: Blocks 84, 85, and 86 are a sensitivity control for determining the effect of the reabsorption factor RFAB on distal tubule reabsorption (RFABD). The sensitivity is controlled by the factor in Block 85, RFABDM.
    RFABD1 = (RFAB-1{dimensionless})*RFABDM+1{dimensionless};
    // value: KD87: Block 87 prevents the value of RFABD from falling below a value of .0001.
    RFABD = sel
      case RFABD1 < 0.0001{dimensionless}:
        0.0001{dimensionless};
      otherwise:
        RFABD1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between peritubular_capillary_reabsorption_factor and peritubular_capillary_pressure for
    vars RCPRS and RCPRS;
  enddef;
  def map between peritubular_capillary_reabsorption_factor and glomerular_colloid_osmotic_pressure for
    vars GLPC and GLPC;
  enddef;
  def map between peritubular_capillary_reabsorption_factor and renal_tissue_osmotic_pressure for
    vars RTSPPC and RTSPPC;
  enddef;
  // PARAMETER CONNECTIONS
  def map between peritubular_capillary_reabsorption_factor and parameter_values for
    vars RTSPRS and RTSPRS;
    vars RABSC and RABSC;
    vars RFABDP and RFABDP;
    vars RFABDM and RFABDM;
  enddef;
  // ========================================	SODIUM AND POTASSIUM HANDLING		=============================================

  // value: Containment grouping component for "distal_tubular_Na_delivery", "Na_reabsorption_into_distal_tubules", "angiotensin_induced_Na_reabsorption_into_distal_tubules", "distal_tubular_K_delivery", "effect_of_physical_forces_on_distal_K_reabsorption", "effect_of_fluid_flow_on_K_reabsorption", "K_reabsorption_into_distal_tubules", "K_secretion_from_distal_tubules".
  def comp sodium_and_potassium_handling as
  enddef;
  // ========================================	DISTAL TUBULAR SODIUM DELIVERY	=============================================

  // value: KD34: Calculation of rate of delivery of sodium into the distal tubular system of two normal kidneys in milliequivalents per minute (DTNAI), which is equal to the normalized delivery of fluid into the distal tubules (MDFLW) times the concentration of sodium in the tubules (CNA), times the factor 0.0061619.
  def comp distal_tubular_Na_delivery as
    // Inputs from other components
    var MDFLW: L_per_minute {priv: none, pub: in};
    var CNA: monovalent_mEq_per_litre {priv: none, pub: in};
    // Outputs to other components
    var DTNAI: monovalent_mEq_per_minute {priv: none, pub: out};
    // value: KD34: Calculation of rate of delivery of sodium into the distal tubular system of two normal kidneys in milliequivalents per minute (DTNAI), which is equal to the normalized delivery of fluid into the distal tubules (MDFLW) times the concentration of sodium in the tubules (CNA), times the factor 0.0061619.
    DTNAI = MDFLW*CNA*0.0061619{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between distal_tubular_Na_delivery and proximal_tubular_and_macula_densa_flow for
    vars MDFLW and MDFLW;
  enddef;
  def map between distal_tubular_Na_delivery and kidney for
    vars CNA and CNA;
  enddef;
  // ========================================	SODIUM REABSORPTION INTO DISTAL TUBULES	=============================================

  // value: KD113, KD114, and KD115: Calculation of the effect of an antidiuretic hormone multiplier constant (ADHMK) on the absorption of sodium by the distal tubular-collecting duct system (output of Block 115). The sensitivity of this ADH effect is adjusted by the sensitivity factor AHMNAR in Block 114. KD36 and KD37: Calculation of the sodium reabsorbed in the distal tubules and collecting duct (DTNARA). The different factors that affect this are the basic value for the normal state (DTNAR), the basic blood capillary hemodynamics of the system (RFABD), the effect of antidiuretic hormone (from Block 115), and the effect of an aldosterone multiplier effect to cause reabsorption of sodium (AMNA) as determined from the output of Block 23 in the aldosterone section of these diagrams. Block 37 sets the lower limit of DTNARA at zero. DIURET allows one to simulate the effect of a diuretic.
  def comp Na_reabsorption_into_distal_tubules as
    // Inputs from other components
    var ADHMK: dimensionless {priv: none, pub: in};
    var AMNA: dimensionless {priv: none, pub: in};
    var RFABD: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var DTNARA: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var DTNAR: monovalent_mEq_per_minute {priv: none, pub: in};
    var DIURET: dimensionless {priv: none, pub: in};
    var AHMNAR: dimensionless {priv: none, pub: in};
    var DTNARL: monovalent_mEq_per_minute {priv: none, pub: in};
    // Internal variables
    var DTNARA1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD113, KD114, and KD115: Calculation of the effect of an antidiuretic hormone multiplier constant (ADHMK) on the absorption of sodium by the distal tubular-collecting duct system (output of Block 115). The sensitivity of this ADH effect is adjusted by the sensitivity factor AHMNAR in Block 114. KD36 and KD37: Calculation of the sodium reabsorbed in the distal tubules and collecting duct (DTNARA). The different factors that affect this are the basic value for the normal state (DTNAR), the basic blood capillary hemodynamics of the system (RFABD), the effect of antidiuretic hormone (from Block 115), and the effect of an aldosterone multiplier effect to cause reabsorption of sodium (AMNA) as determined from the output of Block 23 in the aldosterone section of these diagrams. Block 37 sets the lower limit of DTNARA at zero. DIURET allows one to simulate the effect of a diuretic.
    DTNARA1 = AMNA*RFABD*DTNAR/DIURET*((ADHMK-1{dimensionless})*AHMNAR+1{dimensionless});
    // value: KD36 and KD37: Calculation of the sodium reabsorbed in the distal tubules and collecting duct (DTNARA). The different factors that affect this are the basic value for the normal state (DTNAR), the basic blood capillary hemodynamics of the system (RFABD), the effect of antidiuretic hormone (from Block 115), and the effect of an aldosterone multiplier effect to cause reabsorption of sodium (AMNA) as determined from the output of Block 23 in the aldosterone section of these diagrams. Block 37 sets the lower limit of DTNARA at zero. DIURET allows one to simulate the effect of a diuretic.
    DTNARA = sel
      case DTNARA1 < DTNARL:
        DTNARL;
      otherwise:
        DTNARA1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between Na_reabsorption_into_distal_tubules and kidney for
    vars ADHMK and ADHMK;
    vars AMNA and AMNA;
  enddef;
  def map between Na_reabsorption_into_distal_tubules and peritubular_capillary_reabsorption_factor for
    vars RFABD and RFABD;
  enddef;
  // PARAMETER CONNECTIONS
  def map between Na_reabsorption_into_distal_tubules and parameter_values for
    vars DTNAR and DTNAR;
    vars DIURET and DIURET;
    vars AHMNAR and AHMNAR;
    vars DTNARL and DTNARL;
  enddef;
  // =========================	ANGIOTENSIN-INDUCED SODIUM REABSORPTION INTO DISTAL TUBULES	==================================

  // value: KD108, KD109, KD110, KD111, and KD112: Calculation of the fraction of the distal tubular reabsorption of sodium that is absorbed each minute that is dependent on the availability of angiotensin (DTNANG). The input factor to this system of blocks, ANM, is the angiotensin multiplier. Blocks 108, 109, and 110 adjust the sensitivity of the effect in accordance with the sensitivity factor ANMNAM. Block 111 converts the output of Block 110 into actual milliequivalents of sodium per minute, and Block 112 places a lower limit on absorption of sodium in response to angiotensin to a level of zero.
  def comp angiotensin_induced_Na_reabsorption_into_distal_tubules as
    // Inputs from other components
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var DTNANG: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMNAM: dimensionless {priv: none, pub: in};
    // Internal variables
    var DTNANG1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD108, KD109, KD110 and KD111: Calculation of the fraction of the distal tubular reabsorption of sodium that is absorbed each minute that is dependent on the availability of angiotensin (DTNANG). The input factor to this system of blocks, ANM, is the angiotensin multiplier. Blocks 108, 109, and 110 adjust the sensitivity of the effect in accordance with the sensitivity factor ANMNAM. Block 111 converts the output of Block 110 into actual milliequivalents of sodium per minute.
    DTNANG1 = ((ANM-1{dimensionless})*ANMNAM+1{dimensionless})*0.1{monovalent_mEq_per_minute};
    // value: KD112: Block 112 places a lower limit on absorption of sodium in response to angiotensin to a level of zero.
    DTNANG = sel
      case DTNANG1 < 0{monovalent_mEq_per_minute}:
        0{monovalent_mEq_per_minute};
      otherwise:
        DTNANG1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between angiotensin_induced_Na_reabsorption_into_distal_tubules and kidney for
    vars ANM and ANM;
  enddef;
  // PARAMETER CONNECTIONS
  def map between angiotensin_induced_Na_reabsorption_into_distal_tubules and parameter_values for
    vars ANMNAM and ANMNAM;
  enddef;
  // ========================================	DISTAL TUBULAR POTASSIUM DELIVERY	=============================================

  // value: KD101 and KD102: Calculation of the rate of entry of potassium into the distal tubular system (DTKI) based on the rate of sodium entry into the system (DTNAI), divided by the concentration of sodium in the extracellular fluid (CNA), and multiplied by the concentration of potassium in the extracellular fluid (CKE).
  def comp distal_tubular_K_delivery as
    // Inputs from other components
    var DTNAI: monovalent_mEq_per_minute {priv: none, pub: in};
    var CNA: monovalent_mEq_per_litre {priv: none, pub: in};
    var CKE: monovalent_mEq_per_litre {priv: none, pub: in};
    // Outputs to other components
    var DTKI: monovalent_mEq_per_minute {priv: none, pub: out};
    // value: KD101 and KD102: Calculation of the rate of entry of potassium into the distal tubular system (DTKI) based on the rate of sodium entry into the system (DTNAI), divided by the concentration of sodium in the extracellular fluid (CNA), and multiplied by the concentration of potassium in the extracellular fluid (CKE).
    DTKI = DTNAI*CKE/CNA;
  enddef;
  // INPUT CONNECTIONS
  def map between distal_tubular_K_delivery and distal_tubular_Na_delivery for
    vars DTNAI and DTNAI;
  enddef;
  def map between distal_tubular_K_delivery and kidney for
    vars CNA and CNA;
    vars CKE and CKE;
  enddef;
  // ========================================	EFFECT OF PHYSICAL FORCES ON DISTAL K REBASORPTION	=============================================

  // value: KD99 and KD100: Calculation of the effect of renal hemodynamics (RFABD) in affecting the rate of reabsorption of potassium by the distal tubule-collecting duct system (RFABK). The intensity of this effect is controlled by factor RFABKM in Block 100.
  def comp effect_of_physical_forces_on_distal_K_reabsorption as
    // Inputs from other components
    var RFABD: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var RFABK: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var RFABKM: monovalent_mEq_per_minute {priv: none, pub: in};
    // value: KD99 and KD100: Calculation of the effect of renal hemodynamics (RFABD) in affecting the rate of reabsorption of potassium by the distal tubule-collecting duct system (RFABK). The intensity of this effect is controlled by factor RFABKM in Block 100.
    RFABK = (RFABD-1{dimensionless})*RFABKM;
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_physical_forces_on_distal_K_reabsorption and peritubular_capillary_reabsorption_factor for
    vars RFABD and RFABD;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_physical_forces_on_distal_K_reabsorption and parameter_values for
    vars RFABKM and RFABKM;
  enddef;
  // ========================================	EFFECT OF FLUID FLOW ON DISTAL K REABSORPTION	=============================================

  // value: KD88, KD89, KD90, and KD90A: Calculation of a multiplier factor for the effect of rate of flow of fluid into the distal tubular system (MDFLW) on the rate of reabsorption of potassium from the distal tubules and collecting ducts (MDFLK). The sensitivity of this control is MDFLKM in Block 89. The lower limit of the output MDFLK is set to .1 by Block 90A.
  def comp effect_of_fluid_flow_on_distal_K_reabsorption as
    // Inputs from other components
    var MDFLW: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var MDFLK: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var MDFLKM: monovalent_mEq_per_litre {priv: none, pub: in};
    // Internal variables
    var MDFLK1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD88, KD89 and KD90: Calculation of a multiplier factor for the effect of rate of flow of fluid into the distal tubular system (MDFLW) on the rate of reabsorption of potassium from the distal tubules and collecting ducts (MDFLK). The sensitivity of this control is MDFLKM in Block 89.
    MDFLK1 = (MDFLW-1{L_per_minute})*MDFLKM+1{monovalent_mEq_per_minute};
    // value: KD90A: The lower limit of the output MDFLK is set to .1 by Block 90A.
    MDFLK = sel
      case MDFLK1 < 0.1{monovalent_mEq_per_minute}:
        0.1{monovalent_mEq_per_minute};
      otherwise:
        MDFLK1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between effect_of_fluid_flow_on_distal_K_reabsorption and proximal_tubular_and_macula_densa_flow for
    vars MDFLW and MDFLW;
  enddef;
  // PARAMETER CONNECTIONS
  def map between effect_of_fluid_flow_on_distal_K_reabsorption and parameter_values for
    vars MDFLKM and MDFLKM;
  enddef;
  // ========================================	POTASSIUM REABSORPTION INTO DISTAL TUBULES	=============================================

  // value: KD104, KD105, KD106, and KD107: The rate of reabsorption of potassium in the distal tubule-collecting duct system DTKA is proportional to the urinary excretion rate of potassium (KODN) times a proportionality factor, .0004519, and divided by the rate of output of urine from the kidneys (VUDN). Blocks 105, 106, and 107 are a time delay circuit to allow for the time required for this effect to develop. The time delay constant is determined by factor I6 in Block 106.
  def comp K_reabsorption_into_distal_tubules as
    // Inputs from other components
    var KODN: monovalent_mEq_per_minute {priv: none, pub: in};
    var VUDN: L_per_minute {priv: none, pub: in};
    var time: minute {priv: none, pub: in};
    // Outputs to other components
    var DTKA: monovalent_mEq_per_minute {init: 0.0367573, priv: none, pub: out};
    // value: KD104, KD105, KD106, and KD107: The rate of reabsorption of potassium in the distal tubule-collecting duct system DTKA is proportional to the urinary excretion rate of potassium (KODN) times a proportionality factor, .0004519, and divided by the rate of output of urine from the kidneys (VUDN). Blocks 105, 106, and 107 are a time delay circuit to allow for the time required for this effect to develop. The time delay constant is determined by factor I6 in Block 106.
    ode(DTKA, time) = (KODN/VUDN*0.0004518{L_per_minute}-DTKA)*1.0{per_minute};
  enddef;
  // INPUT CONNECTIONS
  def map between K_reabsorption_into_distal_tubules and normal_K_excretion for
    vars KODN and KODN;
    vars DTKA and DTKA;
  enddef;
  def map between K_reabsorption_into_distal_tubules and normal_urine_volume for
    vars VUDN and VUDN;
  enddef;
  def map between K_reabsorption_into_distal_tubules and kidney for
    vars time and time;
  enddef;
  // ========================================	POTASSIUM SECRETION FROM DISTAL TUBULES	=============================================

  // value: KD91, KD92, and KD93: Calculation of a temporary rate of potassium secretion into the distal tubular-collecting tubular system (DTKSC1) based on the concentration of potassium in the plasma (CKE), which is first normalized to the value 1.0 in Block 91, then raised to a power (CKEEX) in Block 92. The result is multiplied by the delivery of potassium into the tubular system at the macula densa level of the distal tubule (MDFLK), and by a multiplier effect depicting the effect of aldosterone on the secretion of potassium by the tubular epithelium into the tubule (AMK). KD94, KD95, KD96, KD97, and KD98: Calculation of the actual rate of secretion of potassium into the distal tubule-collecting duct system (DTKSC) by multiplying the temporary rate of secretion from Block 93 (DTKSC1) times a multiplier factor based on angiotensin concentration in the body fluids (ANMKE). ANMKE is calculated from a generalized body angiotensin multiplier factor (ANM) times a controller for the sensitivity of this effect (ANMKEM). ANMKE is limited to a lowest value by ANMKEL in Block 97.
  def comp K_secretion_from_distal_tubules as
    // Inputs from other components
    var CKE: monovalent_mEq_per_litre {priv: none, pub: in};
    var AMK: dimensionless {priv: none, pub: in};
    var MDFLK: monovalent_mEq_per_minute {priv: none, pub: in};
    var ANM: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var DTKSC: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var ANMKEM: dimensionless {priv: none, pub: in};
    var ANMKEL: dimensionless {priv: none, pub: in};
    var CKEEX: dimensionless {priv: none, pub: in};
    // Internal variables
    var ANMKE1: dimensionless {priv: none, pub: none};
    var ANMKE: dimensionless {priv: none, pub: none};
    // value: KD94, KD95 and KD96: Calculation of the actual rate of secretion of potassium into the distal tubule-collecting duct system (DTKSC) by multiplying the temporary rate of secretion from Block 93 (DTKSC1) times a multiplier factor based on angiotensin concentration in the body fluids (ANMKE). ANMKE is calculated from a generalized body angiotensin multiplier factor (ANM) times a controller for the sensitivity of this effect (ANMKEM).
    ANMKE1 = (ANM-1{dimensionless})*ANMKEM+1{dimensionless};
    // value: KD97: ANMKE is limited to a lowest value by ANMKEL in Block 97.
    ANMKE = sel
      case ANMKE1 < ANMKEL:
        ANMKEL;
      otherwise:
        ANMKE1;
    endsel;
    // value: KD91, KD92, and KD93: Calculation of a temporary rate of potassium secretion into the distal tubular-collecting tubular system (DTKSC1) based on the concentration of potassium in the plasma (CKE), which is first normalized to the value 1.0 in Block 91, then raised to a power (CKEEX) in Block 92. The result is multiplied by the delivery of potassium into the tubular system at the macula densa level of the distal tubule (MDFLK), and by a multiplier effect depicting the effect of aldosterone on the secretion of potassium by the tubular epithelium into the tubule (AMK).
    DTKSC = pow(CKE/4.4{monovalent_mEq_per_litre}, CKEEX)*AMK*0.08{dimensionless}*MDFLK/ANMKE;
  enddef;
  // INPUT CONNECTIONS
  def map between K_secretion_from_distal_tubules and kidney for
    vars CKE and CKE;
    vars AMK and AMK;
    vars ANM and ANM;
  enddef;
  def map between K_secretion_from_distal_tubules and effect_of_fluid_flow_on_distal_K_reabsorption for
    vars MDFLK and MDFLK;
  enddef;
  // PARAMETER CONNECTIONS
  def map between K_secretion_from_distal_tubules and parameter_values for
    vars ANMKEM and ANMKEM;
    vars ANMKEL and ANMKEL;
    vars CKEEX and CKEEX;
  enddef;
  // ========================================	URINARY EXCRETION		=============================================

  // value: Containment grouping component for "normal_Na_excretion", "normal_K_excretion", "normal_urea_excretion", "normal_osmolar_and_water_excretion", "normal_urine_volume", "actual_Na_exretion_rate", "actual_K_excretion_rate", "actual_urea_excretion_rate", "actual_urine_volume".
  def comp urinary_excretion as
  enddef;
  // ========================================	NORMAL SODIUM EXCRETION	=============================================

  // value: KD35: Calculation of the normalized rate of delivery of sodium into the urine (NODN) if both kidneys are intact and normal. This is calculated by subtracting from the rate of entry of sodium into the distal tubular system (DTNAI) the distal tubular and collecting duct reabsorption of sodium caused by the presence of angiotensin in the blood (DTNANG) and that caused by multiple other factors (DTNARA) from Blocks 36 and 37. KD38: This sets a lower limit for the normalized output of sodium (NODN) to zero.
  def comp normal_Na_excretion as
    // Inputs from other components
    var DTNAI: monovalent_mEq_per_minute {priv: none, pub: in};
    var DTNANG: monovalent_mEq_per_minute {priv: none, pub: in};
    var DTNARA: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var NODN: monovalent_mEq_per_minute {priv: none, pub: out};
    // Internal variables
    var NODN1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD35: Calculation of the normalized rate of delivery of sodium into the urine (NODN) if both kidneys are intact and normal. This is calculated by subtracting from the rate of entry of sodium into the distal tubular system (DTNAI) the distal tubular and collecting duct reabsorption of sodium caused by the presence of angiotensin in the blood (DTNANG) and that caused by multiple other factors (DTNARA) from Blocks 36 and 37.
    NODN1 = DTNAI-DTNARA-DTNANG;
    // value: KD38: This sets a lower limit for the normalized output of sodium (NODN) to zero.
    NODN = sel
      case NODN1 < 0.00000001{monovalent_mEq_per_minute}:
        0.00000001{monovalent_mEq_per_minute};
      otherwise:
        NODN1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between normal_Na_excretion and distal_tubular_Na_delivery for
    vars DTNAI and DTNAI;
  enddef;
  def map between normal_Na_excretion and angiotensin_induced_Na_reabsorption_into_distal_tubules for
    vars DTNANG and DTNANG;
  enddef;
  def map between normal_Na_excretion and Na_reabsorption_into_distal_tubules for
    vars DTNARA and DTNARA;
  enddef;
  // ========================================	NORMAL POTASSIUM EXCRETION	=============================================

  // value: KD103 and KD103A: The normalized rate of excretion of potassium into the urine by two normal kidneys (KODN) is equal to the rate of entry of potassium into the distal tubular-collecting duct system (DTKI), minus any excess absorption caused by abnormal renal hemodynamics (RFABK), plus the rate of secretion of potassium by the tubular epithelium into the distal tubules and collecting tubules (DTKSC), and minus the rate of absorption of potassium by all portions of the distal tubule-collecting duct system DTKA. Block 103A sets the lower limit of the excretion of potassium in the urine (KODN) at zero.
  def comp normal_K_excretion as
    // Inputs from other components
    var DTKI: monovalent_mEq_per_minute {priv: none, pub: in};
    var RFABK: monovalent_mEq_per_minute {priv: none, pub: in};
    var DTKSC: monovalent_mEq_per_minute {priv: none, pub: in};
    var DTKA: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var KODN: monovalent_mEq_per_minute {priv: none, pub: out};
    // Internal variables
    var KODN1: monovalent_mEq_per_minute {priv: none, pub: none};
    // value: KD103: The normalized rate of excretion of potassium into the urine by two normal kidneys (KODN) is equal to the rate of entry of potassium into the distal tubular-collecting duct system (DTKI), minus any excess absorption caused by abnormal renal hemodynamics (RFABK), plus the rate of secretion of potassium by the tubular epithelium into the distal tubules and collecting tubules (DTKSC), and minus the rate of absorption of potassium by all portions of the distal tubule-collecting duct system DTKA.
    KODN1 = DTKI+DTKSC-DTKA-RFABK;
    // value: KD103A: Block 103A sets the lower limit of the excretion of potassium in the urine (KODN) at zero.
    KODN = sel
      case KODN1 < 0{monovalent_mEq_per_minute}:
        0{monovalent_mEq_per_minute};
      otherwise:
        KODN1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between normal_K_excretion and distal_tubular_K_delivery for
    vars DTKI and DTKI;
  enddef;
  def map between normal_K_excretion and effect_of_physical_forces_on_distal_K_reabsorption for
    vars RFABK and RFABK;
  enddef;
  def map between normal_K_excretion and K_secretion_from_distal_tubules for
    vars DTKSC and DTKSC;
  enddef;
  // ========================================	NORMAL UREA EXCRETION		=============================================

  // value: KD52: Calculation of the rate of excretion of urea if both kidneys were functionally intact (DTURI) by multiplying the concentration of urea in the glomerular filtrate (PLURC) times the square of glomerular filtration for the two normal kidneys (GFN) times the numerical factor 3.84.
  def comp normal_urea_excretion as
    // Inputs from other components
    var GFN: L_per_minute {priv: none, pub: in};
    var PLURC: mOsm_per_litre {priv: none, pub: in};
    // Outputs to other components
    var DTURI: mOsm_per_minute {priv: none, pub: out};
    // value: KD52: Calculation of the rate of excretion of urea if both kidneys were functionally intact (DTURI) by multiplying the concentration of urea in the glomerular filtrate (PLURC) times the square of glomerular filtration for the two normal kidneys (GFN) times the numerical factor 3.84.
    DTURI = sqr(GFN)*PLURC*3.84{dimensionless};
  enddef;
  // INPUT CONNECTIONS
  def map between normal_urea_excretion and plasma_urea_concentration for
    vars PLURC and PLURC;
  enddef;
  def map between normal_urea_excretion and glomerular_filtration_rate for
    vars GFN and GFN;
  enddef;
  // ========================================	NORMAL OSMOLAR AND WATER EXCRETION		=============================================

  // value: KD40, KD41, and KD42: Calculation of the normalized output of osmotic substances by the kidneys if both kidneys are functioning totally and normally (OSMOPN) by adding together in Block 40 the milliequivalents of sodium output (NODN) and potassium output (KODN), then multiplying in Block 41 by a factor of 2 to include the anions that go with the sodium and potassium cations, and addition in Block 42 of osmotic excretion in the form of urea (DUTRI).
  def comp normal_osmolar_and_water_excretion as
    // Inputs from other components
    var DTURI: mOsm_per_minute {priv: none, pub: in};
    var NODN: monovalent_mEq_per_minute {priv: none, pub: in};
    var KODN: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var OSMOPN1: mOsm_per_minute {priv: none, pub: out};
    var OSMOPN: mOsm_per_minute {priv: none, pub: out};
    // value: KD40, KD41, and KD42: Calculation of the normalized output of osmotic substances by the kidneys if both kidneys are functioning totally and normally (OSMOPN) by adding together in Block 40 the milliequivalents of sodium output (NODN) and potassium output (KODN), then multiplying in Block 41 by a factor of 2 to include the anions that go with the sodium and potassium cations, and addition in Block 42 of osmotic excretion in the form of urea (DUTRI).
    OSMOPN1 = DTURI+2{dimensionless}*(NODN+KODN);
    OSMOPN = sel
      case OSMOPN1 > 0.6{mOsm_per_minute}:
        0.6{mOsm_per_minute};
      otherwise:
        OSMOPN1;
    endsel;
  enddef;
  // INPUT CONNECTIONS
  def map between normal_osmolar_and_water_excretion and normal_Na_excretion for
    vars NODN and NODN;
  enddef;
  def map between normal_osmolar_and_water_excretion and normal_K_excretion for
    vars KODN and KODN;
  enddef;
  def map between normal_osmolar_and_water_excretion and normal_urea_excretion for
    vars DTURI and DTURI;
  enddef;
  // ========================================	NORMAL URINE VOLUME	=============================================

  // value: KD43, KD44, KD45, KD46, KD47, and KD48: Calculation of the normalized output of urine volume if both kidneys are totally intact (VUDN) as the output of Block 48. Blocks 43, 45, and 47 calculate the portion of VUDN that is caused by excess of osmotic substances (OSMOP1) over and above the normal amount (OSMOPN). Blocks 44 and 46 calculate the portion of VUDN that is caused by that portion of OSMOPN that is below the normal value of .6. The sensitivity of this portion of urine output varies markedly with the antidiuretic hormone effect on the kidney (ADHMK). Block 48 summates the total VUDN caused by the osmotic substances above the normal level of .6 plus those caused by the osmotic substances below the normal level of .6.
  def comp normal_urine_volume as
    // Inputs from other components
    var OSMOPN: mOsm_per_minute {priv: none, pub: in};
    var OSMOPN1: mOsm_per_minute {priv: none, pub: in};
    var ADHMK: dimensionless {priv: none, pub: in};
    // Outputs to other components
    var VUDN: L_per_minute {priv: none, pub: out};
    // Internal variables
    var OSMOP1T: mOsm_per_minute {priv: none, pub: none};
    var OSMOP1: mOsm_per_minute {priv: none, pub: none};
    // value: KD43, KD44, KD45, KD46, KD47, and KD48: Calculation of the normalized output of urine volume if both kidneys are totally intact (VUDN) as the output of Block 48. Blocks 43, 45, and 47 calculate the portion of VUDN that is caused by excess of osmotic substances (OSMOP1) over and above the normal amount (OSMOPN). Blocks 44 and 46 calculate the portion of VUDN that is caused by that portion of OSMOPN that is below the normal value of .6. The sensitivity of this portion of urine output varies markedly with the antidiuretic hormone effect on the kidney (ADHMK). Block 48 summates the total VUDN caused by the osmotic substances above the normal level of .6 plus those caused by the osmotic substances below the normal level of .6.
    OSMOP1T = OSMOPN1-0.6{mOsm_per_minute};
    // value: KD43, KD44, KD45, KD46, KD47, and KD48: Calculation of the normalized output of urine volume if both kidneys are totally intact (VUDN) as the output of Block 48. Blocks 43, 45, and 47 calculate the portion of VUDN that is caused by excess of osmotic substances (OSMOP1) over and above the normal amount (OSMOPN). Blocks 44 and 46 calculate the portion of VUDN that is caused by that portion of OSMOPN that is below the normal value of .6. The sensitivity of this portion of urine output varies markedly with the antidiuretic hormone effect on the kidney (ADHMK). Block 48 summates the total VUDN caused by the osmotic substances above the normal level of .6 plus those caused by the osmotic substances below the normal level of .6.
    OSMOP1 = sel
      case OSMOP1T < 0{mOsm_per_minute}:
        0{mOsm_per_minute};
      otherwise:
        OSMOP1T;
    endsel;
    // value: KD43, KD44, KD45, KD46, KD47, and KD48: Calculation of the normalized output of urine volume if both kidneys are totally intact (VUDN) as the output of Block 48. Blocks 43, 45, and 47 calculate the portion of VUDN that is caused by excess of osmotic substances (OSMOP1) over and above the normal amount (OSMOPN). Blocks 44 and 46 calculate the portion of VUDN that is caused by that portion of OSMOPN that is below the normal value of .6. The sensitivity of this portion of urine output varies markedly with the antidiuretic hormone effect on the kidney (ADHMK). Block 48 summates the total VUDN caused by the osmotic substances above the normal level of .6 plus those caused by the osmotic substances below the normal level of .6.
    VUDN = OSMOPN/(600{mOsm_per_litre}*ADHMK)+OSMOP1/360{mOsm_per_litre};
  enddef;
  // INPUT CONNECTIONS
  def map between normal_urine_volume and normal_osmolar_and_water_excretion for
    vars OSMOPN1 and OSMOPN1;
    vars OSMOPN and OSMOPN;
  enddef;
  def map between normal_urine_volume and kidney for
    vars ADHMK and ADHMK;
  enddef;
  // ========================================	ACTUAL_SODIUM_EXCRETION_RATE	=============================================

  // value: KD39: Calculation of the actual rate of sodium output from the kidneys (NOD) by multiplying the normalized rate (NODN) times the percentage of normal kidney mass that is present in the body (REK).
  def comp actual_Na_excretion_rate as
    // Inputs from other components
    var NODN: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var NOD: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    // value: KD39: Calculation of the actual rate of sodium output from the kidneys (NOD) by multiplying the normalized rate (NODN) times the percentage of normal kidney mass that is present in the body (REK).
    NOD = NODN*REK;
  enddef;
  // INPUT CONNECTIONS
  def map between actual_Na_excretion_rate and normal_Na_excretion for
    vars NODN and NODN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_Na_excretion_rate and parameter_values for
    vars REK and REK;
  enddef;
  // ========================================	ACTUAL POTASSIUM EXCRETION RATE		=============================================

  // value: KD116: Calculation of the actual rate of potassium output from the kidneys (KOD) by multiplying the normalized rate (KODN) times the percentage of normal kidney mass that is present in the body (REK).
  def comp actual_K_excretion_rate as
    // Inputs from other components
    var KODN: monovalent_mEq_per_minute {priv: none, pub: in};
    // Outputs to other components
    var KOD: monovalent_mEq_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    KOD = KODN*REK;
  enddef;
  // INPUT CONNECTIONS
  def map between actual_K_excretion_rate and normal_K_excretion for
    vars KODN and KODN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_K_excretion_rate and parameter_values for
    vars REK and REK;
  enddef;
  // ========================================	ACTUAL UREA EXCRETION RATE	=============================================

  // value: KD56: Calculation of rate of excretion of urea per minute in terms of osmoles (UROD), which is equal to the rate of excretion if the kidneys were normal (DTURI) times the actual fraction of normal kidney mass in the body (REK).
  def comp actual_urea_excretion_rate as
    // Inputs from other components
    var DTURI: mOsm_per_minute {priv: none, pub: in};
    // Outputs to other components
    var UROD: mOsm_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    // value: KD56: Calculation of rate of excretion of urea per minute in terms of osmoles (UROD), which is equal to the rate of excretion if the kidneys were normal (DTURI) times the actual fraction of normal kidney mass in the body (REK).
    UROD = DTURI*REK;
  enddef;
  // INPUT CONNECTIONS
  def map between actual_urea_excretion_rate and normal_urea_excretion for
    vars DTURI and DTURI;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_urea_excretion_rate and parameter_values for
    vars REK and REK;
  enddef;
  // ========================================	ACTUAL URINE VOLUME	=============================================

  // value: KD49: Actual rate of urinary output (VUD) calculated from the rate of output if both kidneys were totally intact (VUDN) by multiplying VUDN by the fraction of normal kidney mass that is functional in the body (REK). KD50: A stability test to test whether or not VUD is varying up and down too much and if so making appropriate mathematical corrections. This is simply a mathematical maneuver for allowing more rapid solution of the equations. NB - This stability test has not been coded!!!
  def comp actual_urine_volume as
    // Inputs from other components
    var VUDN: L_per_minute {priv: none, pub: in};
    // Outputs to other components
    var VUD: L_per_minute {priv: none, pub: out};
    // Parameters from parameter_file
    var REK: dimensionless {priv: none, pub: in};
    // value: KD49: Actual rate of urinary output (VUD) calculated from the rate of output if both kidneys were totally intact (VUDN) by multiplying VUDN by the fraction of normal kidney mass that is functional in the body (REK).
    VUD = VUDN*REK;
    // <apply id="KD50 - STABILITY TEST">
    // </apply>
  enddef;
  // INPUT CONNECTIONS
  def map between actual_urine_volume and normal_urine_volume for
    vars VUDN and VUDN;
  enddef;
  // PARAMETER CONNECTIONS
  def map between actual_urine_volume and parameter_values for
    vars REK and REK;
  enddef;
  // ==========================================================	PARAMETER VALUES	================================================================

  def comp parameter_values as
    var GBL: mmHg {init: 0, priv: none, pub: out};
    // Goldblatt pressure clamp (mmHg)
    var RAPRSP: mmHg {init: 0, priv: none, pub: out};
    // overriding value of renal arterial pressure (if > 0) [P]
    var RFCDFT: dimensionless {init: 0, priv: none, pub: out};
    // renal function curve drift factor (if > 0) [P]
    var RCDFDP: minute {init: 2000, priv: none, pub: out};
    // renal function curve drift damping factor [P]
    var RCDFPC: dimensionless {init: 0, priv: none, pub: out};
    // renal function curve drift coefficient [P]
    var RNAUGN: minute_per_L {init: 0.6, priv: none, pub: out};
    // basal renal autoregulation feedback multiplier
    var RNAULL: dimensionless {init: 0.3, priv: none, pub: out};
    // RNAUG1 lower limit
    var RNAUUL: dimensionless {init: 10, priv: none, pub: out};
    // RNAUG1 upper limit
    var RNAGTC: minute {init: 15, priv: none, pub: out};
    // time constant, renal autoregulation feedback [P]
    var RNAUAD: per_minute {init: 0, priv: none, pub: out};
    // renal autoregulation, adaptation controller [P]
    var ARF: dimensionless {init: 0.5, priv: none, pub: out};
    // sensitivity controller of AUMK [P]
    var ANMAM: dimensionless {init: 1.4, priv: none, pub: out};
    // sensitivity effect of angiotensin on afferent arterioles [P]
    var ANMARL: dimensionless {init: 0.86, priv: none, pub: out};
    // ANMAR lower limit [P]
    var AARK: mmHg_minute_per_L {init: 1, priv: none, pub: out};
    // basic afferent arteriolar resistance [P]
    var AARLL: mmHg_minute_per_L {init: 4, priv: none, pub: out};
    // AAR lower limit [P]
    var ANPXAF: mmHg_minute_per_L {init: 1.5, priv: none, pub: out};
    // sensitivity factor of ANP on renal afferent resistance [P]
    var AUMK1: dimensionless {init: 0.3, priv: none, pub: out};
    // autonomic sensitivity controller on EAR [P]
    var ANMEM: dimensionless {init: 1.6, priv: none, pub: out};
    // sensitivity effect of angiotensin on efferent arterioles [P]
    var EFAFR: dimensionless {init: 0, priv: none, pub: out};
    // efferent arteriolar feedback, sensitivity controller [P]
    var EARK: mmHg_minute_per_L {init: 1, priv: none, pub: out};
    // basic efferent arteriolar resistance [P]
    var EARLL: mmHg_minute_per_L {init: 24, priv: none, pub: out};
    // lower limit for EAR [P]
    var REK: dimensionless {init: 1, priv: none, pub: out};
    // total functional renal mass, ratio to normal [P]
    var GPPD: dimensionless {init: 1.0, priv: none, pub: out};
    // damping coefficient GLPC [P]
    var GLPCA: mmHg {init: 1.0, priv: none, pub: out};
    // if > 0, activates GLPC comput. due to filtration fraction
    var PXTP: mmHg {init: 8, priv: none, pub: out};
    // proximal tubular hydrostatic pressure [P]
    var GFLC: L_per_minute_per_mmHg {init: 0.0208333, priv: none, pub: out};
    // glomerular filtration coefficient [P]
    var GFNLL: L_per_minute {init: 0.001, priv: none, pub: out};
    // GFN lower limit [P]
    var GFNDMP: dimensionless {init: 3, priv: none, pub: out};
    // GFN damping coefficient [P]
    var URFORM: mOsm_per_minute {init: 0.24, priv: none, pub: out};
    // rate of urea formation
    var MDFL1: dimensionless {init: 10, priv: none, pub: out};
    // sensitivity controller of MDFLW [P]
    var RTPPR: dimensionless {init: 0.9, priv: none, pub: out};
    // renal oncotic, internal var [P]
    var RTPPRS: mmHg {init: 15.2, priv: none, pub: out};
    // renal oncotic, internal var [P]
    var RTSPRS: mmHg {init: 6, priv: none, pub: out};
    // renal tissue fluid pressure [P]
    var MDFLKM: monovalent_mEq_per_litre {init: 0.667, priv: none, pub: out};
    // sensitivity controller of MDFLK [P]
    var ANMKEM: dimensionless {init: 2, priv: none, pub: out};
    // sensitivity controller of ANMKE [P]
    var RVRS: mmHg_minute_per_L {init: 19.167, priv: none, pub: out};
    // curve fitting coefficient, RCPRS [P]
    var RFABX: dimensionless {init: 0.8, priv: none, pub: out};
    var RABSC: per_mmHg {init: 0.5, priv: none, pub: out};
    // peritubular capillary reabsorption coefficient [P]
    var RFABDP: dimensionless {init: 1, priv: none, pub: out};
    // RFAB damping factor [P]
    var RFABDM: dimensionless {init: 0.3, priv: none, pub: out};
    // sensitivity controller of RFABD [P]
    var DTNAR: monovalent_mEq_per_minute {init: 0.675, priv: none, pub: out};
    // sensitivity controller of DTNARA [P]
    var DTNARL: monovalent_mEq_per_minute {init: 1e-06, priv: none, pub: out};
    // lower limiter of DTNARA [P]
    var DIURET: dimensionless {init: 1, priv: none, pub: out};
    // diuretic effect on tubular reabsorption [P]
    var AHMNAR: dimensionless {init: 0.3, priv: none, pub: out};
    // sensitivity control, renal effect of ADHMK [P]
    var ANMNAM: dimensionless {init: 1, priv: none, pub: out};
    // sensitivity controller of DTNANG [P]
    var RFABKM: monovalent_mEq_per_minute {init: 0.03, priv: none, pub: out};
    // proportionality constant, RFABK [P]
    var ANMKEL: dimensionless {init: 0.3, priv: none, pub: out};
    // ANMKE lower limit [P]
    var CKEEX: dimensionless {init: 4, priv: none, pub: out};
    // curve fitting exponent, distal potassium reabsorption [P]
  enddef;
  // ============================================================		GROUPING		===============================================================

  def group as containment for
    comp kidney incl
      comp perfusion_pressure;
      comp total_renal_resistance;
      comp normal_renal_blood_flow;
      comp actual_renal_blood_flow;
      comp renal_tissue_osmotic_pressure;
      comp proximal_tubular_and_macula_densa_flow;
      comp renal_autoregulatory_feedback_factor;
      comp afferent_arterial_resistance incl
        comp autonomic_effect_on_AAR;
        comp angiotensin_effect_on_AAR;
        comp AAR_calculation;
        comp atrial_natriuretic_peptide_effect_on_AAR;
      endcomp;
      comp efferent_arterial_resistance incl
        comp autonomic_effect_on_EAR;
        comp angiotensin_effect_on_EAR;
        comp effect_of_renal_autoregulatory_feedback_on_EAR;
        comp EAR_calculation;
      endcomp;
      comp glomerular_capillaries incl
        comp glomerular_colloid_osmotic_pressure;
        comp glomerular_pressure;
        comp glomerular_filtration_rate;
      endcomp;
      comp renal_peritubular_capillaries incl
        comp peritubular_capillary_pressure;
        comp peritubular_capillary_reabsorption_factor;
      endcomp;
      comp sodium_and_potassium_handling incl
        comp distal_tubular_Na_delivery;
        comp Na_reabsorption_into_distal_tubules;
        comp angiotensin_induced_Na_reabsorption_into_distal_tubules;
        comp distal_tubular_K_delivery;
        comp effect_of_physical_forces_on_distal_K_reabsorption;
        comp effect_of_fluid_flow_on_distal_K_reabsorption;
        comp K_reabsorption_into_distal_tubules;
        comp K_secretion_from_distal_tubules;
      endcomp;
      comp urea_handling incl
        comp glomerular_urea_concentration;
        comp plasma_urea_concentration;
      endcomp;
      comp urinary_excretion incl
        comp normal_Na_excretion;
        comp normal_K_excretion;
        comp normal_urea_excretion;
        comp normal_osmolar_and_water_excretion;
        comp normal_urine_volume;
        comp actual_Na_excretion_rate;
        comp actual_K_excretion_rate;
        comp actual_urea_excretion_rate;
        comp actual_urine_volume;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp kidney incl
      comp parameter_values;
      comp perfusion_pressure;
      comp renal_autoregulatory_feedback_factor;
      comp afferent_arterial_resistance;
      comp autonomic_effect_on_AAR;
      comp angiotensin_effect_on_AAR;
      comp AAR_calculation;
      comp atrial_natriuretic_peptide_effect_on_AAR;
      comp efferent_arterial_resistance;
      comp autonomic_effect_on_EAR;
      comp angiotensin_effect_on_EAR;
      comp effect_of_renal_autoregulatory_feedback_on_EAR;
      comp EAR_calculation;
      comp total_renal_resistance;
      comp normal_renal_blood_flow;
      comp actual_renal_blood_flow;
      comp glomerular_capillaries;
      comp glomerular_colloid_osmotic_pressure;
      comp glomerular_pressure;
      comp glomerular_filtration_rate;
      comp glomerular_urea_concentration;
      comp proximal_tubular_and_macula_densa_flow;
      comp renal_tissue_osmotic_pressure;
      comp urea_handling;
      comp plasma_urea_concentration;
      comp renal_peritubular_capillaries;
      comp peritubular_capillary_pressure;
      comp peritubular_capillary_reabsorption_factor;
      comp sodium_and_potassium_handling;
      comp distal_tubular_Na_delivery;
      comp Na_reabsorption_into_distal_tubules;
      comp angiotensin_induced_Na_reabsorption_into_distal_tubules;
      comp distal_tubular_K_delivery;
      comp effect_of_physical_forces_on_distal_K_reabsorption;
      comp effect_of_fluid_flow_on_distal_K_reabsorption;
      comp K_reabsorption_into_distal_tubules;
      comp K_secretion_from_distal_tubules;
      comp urinary_excretion;
      comp normal_Na_excretion;
      comp normal_K_excretion;
      comp normal_urea_excretion;
      comp normal_osmolar_and_water_excretion;
      comp normal_urine_volume;
      comp actual_Na_excretion_rate;
      comp actual_K_excretion_rate;
      comp actual_urea_excretion_rate;
      comp actual_urine_volume;
    endcomp;
  enddef;
enddef;
// #Kd116
// value: KD116: Calculation of the actual rate of potassium output from the kidneys (KOD) by multiplying the normalized rate (KODN) times the percentage of normal kidney mass that is present in the body (REK).
// #KD50
// value: KD50: A stability test to test whether or not VUD is varying up and down too much and if so making appropriate mathematical corrections. This is simply a mathematical maneuver for allowing more rapid solution of the equations. NB - This stability test has not been coded!!!
