// This CellML file was generated on 20/04/2010 at 9:27:31 at a.m. using:
//
// COR (0.9.31.1371)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// title: A mathematical model of metabolic insulin signaling pathways (with feedback)
// publisher: The University of Auckland, Auckland Bioengineering Institute
// created: W3CDTF 2007-05-30T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2007-06-05T10:44:09+12:00; The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics. This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology.; Given Catherine; Family Lloyd; Other May
// title: Sedaghat, Sherman and Quon's 2002 mathematical model of metabolic insulin signaling pathways.
// comment: FN Catherine Lloyd; This is the CellML descripition of Sedaghat, Sherman and Quon's 2002 mathematical model of metabolic insulin signaling pathways.
// reference: subject_type keyword; signal transduction; metabolism; insulin
// reference: Pubmed_id 12376338; Given Ahmad; Family Sedaghat; Other R; Given Arthur; Family Sherman; Given Michael; Family Quon; Other J; title A mathematical model of metabolic insulin signaling pathways; volume 283; first_page E1084; title American Journal of Physiology; W3CDTF 2002-11; last_page E1101
def model sedaghat_2002_feedback as
  // A Mathematical Model of Metabolic Insulin Signalling Pathways
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model runs in PCEnv, OpenCell and COR and the units are consistent throughout. It describes the complete model with feedback, and it is a close match to figures 8 and 9. However, a time delay was ignored in the eqaution for PKC, which prevents the model from completely matching the paper.
  //
  // Model Structure
  //
  // ABSTRACT: We develop a mathematical model that explicitly represents many of the known signaling components mediating translocation of the insulin-responsive glucose transporter GLUT4 to gain insight into the complexities of metabolic insulin signaling pathways. A novel mechanistic model of postreceptor events including phosphorylation of insulin receptor substrate-1, activation of phosphatidylinositol 3-kinase, and subsequent activation of downstream kinases Akt and protein kinase C-zeta is coupled with previously validated subsystem models of insulin receptor binding, receptor recycling, and GLUT4 translocation. A system of differential equations is defined by the structure of the model. Rate constants and model parameters are constrained by published experimental data. Model simulations of insulin dose-response experiments agree with published experimental data and also generate expected qualitative behaviors such as sequential signal amplification and increased sensitivity of downstream components. We examined the consequences of incorporating feedback pathways as well as representing pathological conditions, such as increased levels of protein tyrosine phosphatases, to illustrate the utility of our model for exploring molecular mechanisms. We conclude that mathematical modeling of signal transduction pathways is a useful approach for gaining insight into the complexities of metabolic insulin signaling.
  //
  // The original paper reference is cited below:
  //
  // A mathematical model of metabolic insulin signaling pathways, Ahmad R. Sedaghat, Arthur Sherman, and Michael J. Quon, 2002,American Journal of Physiology, 283, E1084-E1101. PubMed ID: 12376338 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12376338&dopt=Abstract)
  //
  // reaction_diagram
  //
  // Schematic diagram of the layout of the model elements.
  def unit percentage as
    unit dimensionless;
  enddef;
  def unit molar as
    unit litre {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit rate as
    unit molar;
    unit minute {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit molar {expo: -1};
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  // title: x1
  // alternative: insulin input
  def comp x1 as
    var x1: molar {pub: out};
    var time: minute {pub: in};
    x1 = sel
      case time < 15{minute}:
        1e-7{molar};
      otherwise:
        0{molar};
    endsel;
  enddef;

  // title: x2
  // alternative: concentration of unbound surface insulin receptors
  def comp x2 as
    var x2: molar {init: 9e-13, pub: out};
    var k1: second_order_rate_constant {pub: in};
    var k_minus1: first_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var k_minus4: first_order_rate_constant {pub: in};
    var k_minus3: second_order_rate_constant {pub: in};
    var x1: molar {pub: in};
    var x3: molar {pub: in};
    var x5: molar {pub: in};
    var x6: molar {pub: in};
    var PTP: molar {pub: in};
    var time: minute {pub: in};
    ode(x2, time) = k_minus1*x3+k_minus3*PTP*x5+k_minus4*x6-(k1*x1*x2+k4*x2);
  enddef;

  // title: x3
  // alternative: concentration of unphosphorylated once-bound surface receptors
  def comp x3 as
    var x3: molar {init: 0, pub: out};
    var k1: second_order_rate_constant {pub: in};
    var k_minus1: first_order_rate_constant {pub: in};
    var k3: first_order_rate_constant {pub: in};
    var x1: molar {pub: in};
    var x2: molar {pub: in};
    var time: minute {pub: in};
    ode(x3, time) = k1*x1*x2-(k_minus1*x3+k3*x3);
  enddef;

  // title: x4
  // alternative: concentration of phosphorylated twice-bound surface receptors
  def comp x4 as
    var x4: molar {init: 0, pub: out};
    var k2: second_order_rate_constant {pub: in};
    var k_minus2: first_order_rate_constant {pub: in};
    var k4b: first_order_rate_constant {pub: in};
    var k_minus4b: first_order_rate_constant {pub: in};
    var x1: molar {pub: in};
    var x5: molar {pub: in};
    var x7: molar {pub: in};
    var time: minute {pub: in};
    ode(x4, time) = k2*x1*x5+k_minus4b*x7-(k_minus2*x4+k4b*x4);
  enddef;

  // title: x5
  // alternative: concentration of phosphorylated once-bound surface receptors
  def comp x5 as
    var x5: molar {init: 0, pub: out};
    var k2: second_order_rate_constant {pub: in};
    var k_minus2: first_order_rate_constant {pub: in};
    var k3: first_order_rate_constant {pub: in};
    var k_minus3: second_order_rate_constant {pub: in};
    var k4b: first_order_rate_constant {pub: in};
    var k_minus4b: first_order_rate_constant {pub: in};
    var x1: molar {pub: in};
    var x3: molar {pub: in};
    var x4: molar {pub: in};
    var x8: molar {pub: in};
    var PTP: molar {pub: in};
    var time: minute {pub: in};
    ode(x5, time) = k3*x3+k_minus2*x4+k_minus4b*x8-(k2*x1*x5+k_minus3*PTP*x5+k4b*x5);
  enddef;

  // title: x6
  // alternative: concentration of unbound unphosphorylated intracellular receptors
  def comp x6 as
    var x6: molar {init: 1e-13, pub: out};
    var k4: first_order_rate_constant {pub: in};
    var k_minus4: first_order_rate_constant {pub: in};
    var k5: rate {pub: in};
    var k_minus5: first_order_rate_constant {pub: in};
    var k6: second_order_rate_constant {pub: in};
    var x2: molar {pub: in};
    var x7: molar {pub: in};
    var x8: molar {pub: in};
    var PTP: molar {pub: in};
    var time: minute {pub: in};
    ode(x6, time) = k5+k6*PTP*(x7+x8)+k4*x2-(k_minus5*x6+k_minus4*x6);
  enddef;

  // title: x7
  // alternative: concentration of phosphorylated twice-bound intracellular receptors
  def comp x7 as
    var x7: molar {init: 0, pub: out};
    var k4b: first_order_rate_constant {pub: in};
    var k_minus4b: first_order_rate_constant {pub: in};
    var k6: second_order_rate_constant {pub: in};
    var x4: molar {pub: in};
    var PTP: molar {pub: in};
    var time: minute {pub: in};
    ode(x7, time) = k4b*x4-(k_minus4b*x7+k6*PTP*x7);
  enddef;

  // title: x8
  // alternative: concentration of phosphorylated once-bound intracellular receptors
  def comp x8 as
    var x8: molar {init: 0, pub: out};
    var k4b: first_order_rate_constant {pub: in};
    var k_minus4b: first_order_rate_constant {pub: in};
    var k6: second_order_rate_constant {pub: in};
    var x5: molar {pub: in};
    var PTP: molar {pub: in};
    var time: minute {pub: in};
    ode(x8, time) = k4b*x5-(k_minus4b*x8+k6*PTP*x8);
  enddef;

  // title: x9
  // alternative: concentration of unphosphorylated IRS-1
  def comp x9 as
    var x9: molar {init: 1e-12, pub: out};
    var k7: first_order_rate_constant {pub: in};
    var k_minus7: second_order_rate_constant {pub: in};
    var k7b: first_order_rate_constant {pub: in};
    var k_minus7b: first_order_rate_constant {pub: in};
    var x4: molar {pub: in};
    var x5: molar {pub: in};
    var x10: molar {pub: in};
    var x10a: molar {pub: in};
    var IRp: molar {pub: in};
    var PTP: molar {pub: in};
    var PKC: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(x9, time) = k_minus7*PTP*x10-k7*x9*(x4+x5)/IRp+k_minus7b*x10a-k7b*PKC*x9;
  enddef;

  // title: x10
  // alternative: concentration of tyrosine-phosphorylated IRS-1
  def comp x10 as
    var x10: molar {init: 0, pub: out};
    var k7: first_order_rate_constant {pub: in};
    var k_minus7: second_order_rate_constant {pub: in};
    var k8: second_order_rate_constant {pub: in};
    var k_minus8: first_order_rate_constant {pub: in};
    var x4: molar {pub: in};
    var x5: molar {pub: in};
    var x9: molar {pub: in};
    var x11: molar {pub: in};
    var x12: molar {pub: in};
    var IRp: molar {pub: in};
    var PTP: molar {pub: in};
    var time: minute {pub: in};
    ode(x10, time) = k7*x9*(x4+x5)/IRp+k_minus8*x12-(k_minus7*PTP+k8*x11)*x10;
  enddef;

  // title: x10a
  // alternative: concentration of serine-phosphorylated IRS-1
  def comp x10a as
    var x10a: molar {init: 0, pub: out};
    var k7b: first_order_rate_constant {pub: in};
    var k_minus7b: first_order_rate_constant {pub: in};
    var x9: molar {pub: in};
    var PKC: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(x10a, time) = k7b*PKC*x9-k_minus7b*x10a;
  enddef;

  // title: x11
  // alternative: concentration of unactivated PI 3-kinase
  def comp x11 as
    var x11: molar {init: 1e-13, pub: out};
    var k8: second_order_rate_constant {pub: in};
    var k_minus8: first_order_rate_constant {pub: in};
    var x10: molar {pub: in};
    var x12: molar {pub: in};
    var time: minute {pub: in};
    ode(x11, time) = k_minus8*x12-k8*x10*x11;
  enddef;

  // title: x12
  // alternative: concentration of tyrosine-phosphorylated IRS-1/activated PI 3-kinase complex
  def comp x12 as
    var x12: molar {init: 2.54e-15, pub: out};
    var k8: second_order_rate_constant {pub: in};
    var k_minus8: first_order_rate_constant {pub: in};
    var x10: molar {pub: in};
    var x11: molar {pub: in};
    var time: minute {pub: in};
    ode(x12, time) = k8*x10*x11-k_minus8*x12;
  enddef;

  // title: x13
  // alternative: percentage of PI(3,4,5)P3 out of the total lipid population
  def comp x13 as
    var x13: percentage {init: 0.31, pub: out};
    var k9: first_order_rate_constant {pub: in};
    var k_minus9: second_order_rate_constant {pub: in};
    var k10: first_order_rate_constant {pub: in};
    var k_minus10: second_order_rate_constant {pub: in};
    var x14: percentage {pub: in};
    var x15: percentage {pub: in};
    var PTEN: molar {pub: in};
    var SHIP: molar {pub: in};
    var time: minute {pub: in};
    ode(x13, time) = k9*x14+k10*x15-(k_minus9*PTEN+k_minus10*SHIP)*x13;
  enddef;

  // title: x14
  // alternative: percentage of PI(4,5)P2 out of the total lipid population
  def comp x14 as
    var x14: percentage {init: 99.4, pub: out};
    var k9: first_order_rate_constant {pub: in};
    var k_minus9: second_order_rate_constant {pub: in};
    var x13: percentage {pub: in};
    var PTEN: molar {pub: in};
    var time: minute {pub: in};
    ode(x14, time) = k_minus9*PTEN*x13-k9*x14;
  enddef;

  // title: x15
  // alternative: percentage of PI(3,4)P2 out of the total lipid population
  def comp x15 as
    var x15: percentage {init: 0.29, pub: out};
    var k10: first_order_rate_constant {pub: in};
    var k_minus10: second_order_rate_constant {pub: in};
    var x13: percentage {pub: in};
    var SHIP: molar {pub: in};
    var time: minute {pub: in};
    ode(x15, time) = k_minus10*SHIP*x13-k10*x15;
  enddef;

  // title: x16
  // alternative: percentage of unactivated Akt
  def comp x16 as
    var x16: percentage {init: 100, pub: out};
    var k11: first_order_rate_constant {pub: in};
    var k_minus11: first_order_rate_constant {pub: in};
    var x17: percentage {pub: in};
    var time: minute {pub: in};
    ode(x16, time) = k_minus11*x17-k11*x16;
  enddef;

  // title: x17
  // alternative: percentage of activated Akt
  def comp x17 as
    var x17: percentage {init: 0, pub: out};
    var k11: first_order_rate_constant {pub: in};
    var k_minus11: first_order_rate_constant {pub: in};
    var x16: percentage {pub: in};
    var time: minute {pub: in};
    ode(x17, time) = k11*x16-k_minus11*x17;
  enddef;

  // title: x18
  // alternative: percentage of unactivated PKC-zeta
  def comp x18 as
    var x18: percentage {init: 100, pub: out};
    var k12: first_order_rate_constant {pub: in};
    var k_minus12: first_order_rate_constant {pub: in};
    var x19: percentage {pub: in};
    var time: minute {pub: in};
    ode(x18, time) = k_minus12*x19-k12*x18;
  enddef;

  // title: x19
  // alternative: percentage of activated PKC-zeta
  def comp x19 as
    var x19: percentage {init: 0, pub: out};
    var k12: first_order_rate_constant {pub: in};
    var k_minus12: first_order_rate_constant {pub: in};
    var x18: percentage {pub: in};
    var time: minute {pub: in};
    ode(x19, time) = k12*x18-k_minus12*x19;
  enddef;

  // title: x20
  // alternative: percentage of intracellular GLUT4
  def comp x20 as
    var x20: percentage {init: 96, pub: out};
    var k13: first_order_rate_constant {pub: in};
    var k_minus13: first_order_rate_constant {pub: in};
    var k13b: first_order_rate_constant {pub: in};
    var k14: first_order_rate_constant {pub: in};
    var k_minus14: first_order_rate_constant {pub: in};
    var x21: percentage {pub: in};
    var time: minute {pub: in};
    ode(x20, time) = k_minus13*x21+k14-((k13+k13b)*x20+k_minus14*x20);
  enddef;

  // title: x21
  // alternative: percentage of cell surface GLUT4
  def comp x21 as
    var x21: percentage {init: 4, pub: out};
    var k13: first_order_rate_constant {pub: in};
    var k_minus13: first_order_rate_constant {pub: in};
    var k13b: first_order_rate_constant {pub: in};
    var x20: percentage {pub: in};
    var time: minute {pub: in};
    ode(x21, time) = -k_minus13*x21+(k13+k13b)*x20;
  enddef;

  def comp reaction_constants as
    var PTP: molar {pub: out};
    var PKC: dimensionless {pub: out};
    var V_max: dimensionless {init: 20};
    var K_d: dimensionless {init: 12};
    var n: dimensionless {init: 4};
    var tau: minute {init: 1.5};
    var SHIP: molar {init: 1, pub: out};
    var PTEN: molar {init: 1, pub: out};
    var IRp: molar {init: 8.97e-13, pub: out};
    var k1: second_order_rate_constant {init: 6e7, pub: out};
    var k_minus1: first_order_rate_constant {init: 0.2, pub: out};
    var k2: second_order_rate_constant {pub: out};
    var k_minus2: first_order_rate_constant {pub: out};
    var k3: first_order_rate_constant {init: 2500, pub: out};
    var k_minus3: second_order_rate_constant {pub: out};
    var k4: first_order_rate_constant {pub: out};
    var k_minus4: first_order_rate_constant {init: 0.003, pub: out};
    var k4b: first_order_rate_constant {init: 2.1e-3, pub: out};
    var k_minus4b: first_order_rate_constant {init: 2.1e-4, pub: out};
    var k5: rate {pub: out};
    var k_minus5: first_order_rate_constant {init: 1.67e-18, pub: out};
    var k6: second_order_rate_constant {init: 0.461, pub: out};
    var k7: first_order_rate_constant {init: 4.16, pub: out};
    var k_minus7: second_order_rate_constant {pub: out};
    var k7b: first_order_rate_constant {pub: out};
    var k_minus7b: first_order_rate_constant {pub: out};
    var k8: second_order_rate_constant {pub: out};
    var k_minus8: first_order_rate_constant {init: 10, pub: out};
    var k9: first_order_rate_constant {pub: out};
    var k_minus9: second_order_rate_constant {pub: out};
    var k10: first_order_rate_constant {pub: out};
    var k_minus10: second_order_rate_constant {init: 2.77, pub: out};
    var k11: first_order_rate_constant {pub: out};
    var k_minus11: first_order_rate_constant {pub: out};
    var k12: first_order_rate_constant {pub: out};
    var k_minus12: first_order_rate_constant {pub: out};
    var k13: first_order_rate_constant {pub: out};
    var k_minus13: first_order_rate_constant {init: 0.167, pub: out};
    var k13b: first_order_rate_constant {pub: out};
    var k14: first_order_rate_constant {pub: out};
    var k_minus14: first_order_rate_constant {init: 0.001155, pub: out};
    var k9_basal: first_order_rate_constant;
    var k9_stimulated: first_order_rate_constant {init: 1.39};
    var effect: dimensionless;
    var APequil: dimensionless {init: 9.09};
    var PI3K: molar;
    var time: minute {pub: in};
    var x1: molar {pub: in};
    var x6: molar {pub: in};
    var x7: molar {pub: in};
    var x8: molar {pub: in};
    var x12: molar {pub: in};
    var x13: percentage {pub: in};
    var x17: percentage {pub: in};
    var x19: percentage {pub: in};
    PTP = sel
      case (x17 <= 400{dimensionless}/11{dimensionless}) or (x1 >= 1e-7{molar}):
        1{molar}-0.25{molar}*x17/(100{dimensionless}/11{dimensionless});
      otherwise:
        0{molar};
    endsel;
    PI3K = k8*3.7e-13{molar}*1e-13{molar}/(k8*3.7e-13{molar}+k_minus8);
    PKC = V_max*pow(x19, n)/(pow(K_d, n)+pow(x19, n));
    k2 = k1;
    k_minus2 = 100{dimensionless}*k_minus1;
    k_minus3 = k_minus1/1{molar};
    k4 = k_minus4/9{dimensionless};
    k5 = sel
      case x6+x7+x8 > 1e-13{molar}:
        10{molar}*k_minus5;
      otherwise:
        60{molar}*k_minus5;
    endsel;
    k_minus7 = 2.5{dimensionless}/7.45{molar}*k7;
    k7b = ln(2{dimensionless})/2{minute};
    k_minus7b = k7b*2.5{dimensionless}/7.45{dimensionless}*3.7e-13{dimensionless}/(6.27e-13{dimensionless}-2.5{dimensionless}/7.45{dimensionless}*3.7e-13{dimensionless});
    k8 = k_minus8*5{dimensionless}/70.775{molar}*1e12{dimensionless};
    k9 = (k9_stimulated-k9_basal)*x12/PI3K+k9_basal;
    k_minus9 = 94{dimensionless}/3.1{molar}*k9_stimulated;
    k9_basal = 0.31{molar}/99.4{dimensionless}*k_minus9;
    k10 = 3.1{molar}/2.9{dimensionless}*k_minus10;
    k11 = 0.1{dimensionless}*k_minus11*(x13-0.31{percentage})/(3.1{percentage}-0.31{percentage});
    k_minus11 = 10{dimensionless}*ln(2{dimensionless})*1{first_order_rate_constant};
    k12 = 0.1{dimensionless}*k_minus12*(x13-0.31{percentage})/(3.1{percentage}-0.31{percentage});
    k_minus12 = 10{dimensionless}*ln(2{dimensionless})*1{first_order_rate_constant};
    k13 = 4{dimensionless}/96{dimensionless}*k_minus13;
    k13b = (40{dimensionless}/60{dimensionless}-4{dimensionless}/96{dimensionless})*k_minus13*effect;
    k14 = k_minus14/96{dimensionless};
    effect = (0.2{dimensionless}*x17+0.8{dimensionless}*x19)/APequil;
  enddef;
  def map between x1 and environment for
    vars time and time;
  enddef;
  def map between x2 and environment for
    vars time and time;
  enddef;
  def map between x3 and environment for
    vars time and time;
  enddef;
  def map between x4 and environment for
    vars time and time;
  enddef;
  def map between x5 and environment for
    vars time and time;
  enddef;
  def map between x6 and environment for
    vars time and time;
  enddef;
  def map between x7 and environment for
    vars time and time;
  enddef;
  def map between x8 and environment for
    vars time and time;
  enddef;
  def map between x9 and environment for
    vars time and time;
  enddef;
  def map between x10 and environment for
    vars time and time;
  enddef;
  def map between x10a and environment for
    vars time and time;
  enddef;
  def map between x11 and environment for
    vars time and time;
  enddef;
  def map between x12 and environment for
    vars time and time;
  enddef;
  def map between x13 and environment for
    vars time and time;
  enddef;
  def map between x14 and environment for
    vars time and time;
  enddef;
  def map between x15 and environment for
    vars time and time;
  enddef;
  def map between x16 and environment for
    vars time and time;
  enddef;
  def map between x17 and environment for
    vars time and time;
  enddef;
  def map between x18 and environment for
    vars time and time;
  enddef;
  def map between x19 and environment for
    vars time and time;
  enddef;
  def map between x20 and environment for
    vars time and time;
  enddef;
  def map between x21 and environment for
    vars time and time;
  enddef;
  def map between reaction_constants and environment for
    vars time and time;
  enddef;
  def map between x2 and x1 for
    vars x1 and x1;
  enddef;
  def map between x2 and x3 for
    vars x2 and x2;
    vars x3 and x3;
  enddef;
  def map between x2 and x5 for
    vars x5 and x5;
  enddef;
  def map between x2 and x6 for
    vars x6 and x6;
    vars x2 and x2;
  enddef;
  def map between x3 and x1 for
    vars x1 and x1;
  enddef;
  def map between x4 and x1 for
    vars x1 and x1;
  enddef;
  def map between x5 and x3 for
    vars x3 and x3;
  enddef;
  def map between x4 and x5 for
    vars x4 and x4;
    vars x5 and x5;
  enddef;
  def map between x4 and x7 for
    vars x4 and x4;
    vars x7 and x7;
  enddef;
  def map between x5 and x1 for
    vars x1 and x1;
  enddef;
  def map between x8 and x5 for
    vars x8 and x8;
    vars x5 and x5;
  enddef;
  def map between x6 and x7 for
    vars x7 and x7;
  enddef;
  def map between x8 and x6 for
    vars x8 and x8;
  enddef;
  def map between x9 and x10 for
    vars x9 and x9;
    vars x10 and x10;
  enddef;
  def map between x4 and x9 for
    vars x4 and x4;
  enddef;
  def map between x9 and x5 for
    vars x5 and x5;
  enddef;
  def map between x9 and x10a for
    vars x9 and x9;
    vars x10a and x10a;
  enddef;
  def map between x4 and x10 for
    vars x4 and x4;
  enddef;
  def map between x10 and x5 for
    vars x5 and x5;
  enddef;
  def map between x11 and x10 for
    vars x11 and x11;
    vars x10 and x10;
  enddef;
  def map between x12 and x10 for
    vars x12 and x12;
    vars x10 and x10;
  enddef;
  def map between x11 and x12 for
    vars x11 and x11;
    vars x12 and x12;
  enddef;
  def map between x13 and x14 for
    vars x13 and x13;
    vars x14 and x14;
  enddef;
  def map between x15 and x13 for
    vars x15 and x15;
    vars x13 and x13;
  enddef;
  def map between x16 and x17 for
    vars x16 and x16;
    vars x17 and x17;
  enddef;
  def map between x18 and x19 for
    vars x18 and x18;
    vars x19 and x19;
  enddef;
  def map between x20 and x21 for
    vars x20 and x20;
    vars x21 and x21;
  enddef;
  def map between x1 and reaction_constants for
    vars x1 and x1;
  enddef;
  def map between x2 and reaction_constants for
    vars k1 and k1;
    vars k_minus1 and k_minus1;
    vars k_minus3 and k_minus3;
    vars k4 and k4;
    vars k_minus4 and k_minus4;
    vars PTP and PTP;
  enddef;
  def map between x3 and reaction_constants for
    vars k1 and k1;
    vars k_minus1 and k_minus1;
    vars k3 and k3;
  enddef;
  def map between x4 and reaction_constants for
    vars k2 and k2;
    vars k_minus2 and k_minus2;
    vars k_minus4b and k_minus4b;
    vars k4b and k4b;
  enddef;
  def map between x5 and reaction_constants for
    vars k2 and k2;
    vars k_minus2 and k_minus2;
    vars k3 and k3;
    vars k_minus3 and k_minus3;
    vars k4b and k4b;
    vars k_minus4b and k_minus4b;
    vars PTP and PTP;
  enddef;
  def map between x6 and reaction_constants for
    vars k4 and k4;
    vars k_minus4 and k_minus4;
    vars k5 and k5;
    vars k_minus5 and k_minus5;
    vars k6 and k6;
    vars PTP and PTP;
    vars x6 and x6;
  enddef;
  def map between x7 and reaction_constants for
    vars k4b and k4b;
    vars k_minus4b and k_minus4b;
    vars k6 and k6;
    vars PTP and PTP;
    vars x7 and x7;
  enddef;
  def map between x8 and reaction_constants for
    vars k4b and k4b;
    vars k_minus4b and k_minus4b;
    vars k6 and k6;
    vars PTP and PTP;
    vars x8 and x8;
  enddef;
  def map between x9 and reaction_constants for
    vars k7 and k7;
    vars k_minus7 and k_minus7;
    vars k7b and k7b;
    vars k_minus7b and k_minus7b;
    vars IRp and IRp;
    vars PTP and PTP;
    vars PKC and PKC;
  enddef;
  def map between x10 and reaction_constants for
    vars k7 and k7;
    vars k_minus7 and k_minus7;
    vars k8 and k8;
    vars k_minus8 and k_minus8;
    vars IRp and IRp;
    vars PTP and PTP;
  enddef;
  def map between x10a and reaction_constants for
    vars k7b and k7b;
    vars k_minus7b and k_minus7b;
    vars PKC and PKC;
  enddef;
  def map between x11 and reaction_constants for
    vars k8 and k8;
    vars k_minus8 and k_minus8;
  enddef;
  def map between x12 and reaction_constants for
    vars k8 and k8;
    vars k_minus8 and k_minus8;
    vars x12 and x12;
  enddef;
  def map between x13 and reaction_constants for
    vars k9 and k9;
    vars k_minus9 and k_minus9;
    vars k10 and k10;
    vars k_minus10 and k_minus10;
    vars PTEN and PTEN;
    vars SHIP and SHIP;
    vars x13 and x13;
  enddef;
  def map between x14 and reaction_constants for
    vars k9 and k9;
    vars k_minus9 and k_minus9;
    vars PTEN and PTEN;
  enddef;
  def map between x15 and reaction_constants for
    vars k10 and k10;
    vars k_minus10 and k_minus10;
    vars SHIP and SHIP;
  enddef;
  def map between x16 and reaction_constants for
    vars k11 and k11;
    vars k_minus11 and k_minus11;
  enddef;
  def map between x17 and reaction_constants for
    vars k11 and k11;
    vars k_minus11 and k_minus11;
    vars x17 and x17;
  enddef;
  def map between x18 and reaction_constants for
    vars k12 and k12;
    vars k_minus12 and k_minus12;
  enddef;
  def map between x19 and reaction_constants for
    vars k12 and k12;
    vars k_minus12 and k_minus12;
    vars x19 and x19;
  enddef;
  def map between x20 and reaction_constants for
    vars k13 and k13;
    vars k_minus13 and k_minus13;
    vars k13b and k13b;
    vars k14 and k14;
    vars k_minus14 and k_minus14;
  enddef;
  def map between x21 and reaction_constants for
    vars k13 and k13;
    vars k_minus13 and k_minus13;
    vars k13b and k13b;
  enddef;
enddef;
