// This CellML file was generated on 8/25/2011 at 12:24:17 at AM using:
//
// COR (0.9.31.1409)
// Copyright 2002-2011 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
def model Ohara_Rudy_2011 as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt_per_millimole as
    unit volt {pref: milli};
    unit millimolar {expo: -1};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_millimolar as
    unit millisecond;
    unit millimolar {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit micrometre_3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit per_micrometre_3 as
    unit metre {expo: -3, pref: micro};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit centimeter as
    unit metre {pref: centi};
  enddef;
  def unit centimeter_squared as
    unit centimeter {expo: 2};
  enddef;
  def unit microliter_per_centimeter_cubed as
    unit microliter;
    unit centimeter {expo: -3};
  enddef;
  def unit microF_per_centimeter_squared as
    unit microF;
    unit centimeter_squared {expo: -1};
  enddef;
  def unit microliter as
    unit liter {pref: micro};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
    var celltype: dimensionless {init: 0, pub: out};
  enddef;

  def comp extracellular as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var nao: millimolar {init: 140, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var cao: millimolar {init: 1.8, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var ko: millimolar {init: 5.4, pub: out};
  enddef;

  def comp physical_constants as
    var R: joule_per_kilomole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var zna: dimensionless {init: 1, pub: out};
    var zca: dimensionless {init: 2, pub: out};
    var zk: dimensionless {init: 1, pub: out};
  enddef;

  def comp cell_geometry as
    var L: centimeter {init: 0.01};
    var rad: centimeter {init: 0.0011};
    var vcell: microliter {pub: out};
    var Ageo: centimeter_squared {pub: out};
    var Acap: centimeter_squared {pub: out};
    var vmyo: microliter {pub: out};
    var vnsr: microliter {pub: out};
    var vjsr: microliter {pub: out};
    var vss: microliter {pub: out};
    vcell = 1000{microliter_per_centimeter_cubed}*3.14{dimensionless}*rad*rad*L;
    Ageo = 2{dimensionless}*3.14{dimensionless}*rad*rad+2{dimensionless}*3.14{dimensionless}*rad*L;
    Acap = 2{dimensionless}*Ageo;
    vmyo = 0.68{dimensionless}*vcell;
    vnsr = 0.0552{dimensionless}*vcell;
    vjsr = 0.0048{dimensionless}*vcell;
    vss = 0.02{dimensionless}*vcell;
  enddef;

  def comp membrane as
    var v: millivolt {init: -87, pub: out};
    var time: millisecond {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var vffrt: coulomb_per_mole {pub: out};
    var vfrt: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var INa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var INaL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Ito: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var ICaL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var ICaNa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var ICaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var IKr: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var IKs: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var IK1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var INaCa_i: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var INaCa_ss: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    var INaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var INab: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var IKb: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var IpCa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var ICab: microA_per_microF {pub: in};
    var Istim: microA_per_microF {pub: out};
    var amp: microA_per_microF {init: -80};
    var duration: millisecond {init: 0.5};
    var stimStart: millisecond {init: 50.0};
    Istim = sel
      case (time > stimStart) and (time <= stimStart+duration):
        amp;
      otherwise:
        0{microA_per_microF};
    endsel;
    vffrt = v*F*F/(R*T);
    vfrt = v*F/(R*T);
    ode(v, time) = -(INa+INaL+Ito+ICaL+ICaNa+ICaK+IKr+IKs+IK1+INaCa_i+INaCa_ss+INaK+INab+IKb+IpCa+ICab+Istim);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0004683
  def comp CaMK as
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var KmCaMK: millimolar {init: 0.15, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var aCaMK: per_millimolar_per_millisecond {init: 0.05};
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var bCaMK: per_millisecond {init: 0.00068};
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var CaMKo: dimensionless {init: 0.05};
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var KmCaM: millimolar {init: 0.0015};
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var CaMKb: millimolar {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var CaMKa: millimolar {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var CaMKt: millimolar {init: 0};
    var cass: millimolar {pub: in};
    var time: millisecond {pub: in};
    CaMKb = CaMKo*(1{millimolar}-CaMKt)/(1{dimensionless}+KmCaM/cass);
    CaMKa = CaMKb+CaMKt;
    ode(CaMKt, time) = aCaMK*CaMKb*(CaMKb+CaMKt)-bCaMK*CaMKt;
  enddef;

  def comp intracellular_ions as
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var cmdnmax_b: millimolar {init: 0.05};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var cmdnmax: millimolar;
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var kmcmdn: millimolar {init: 0.00238};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var trpnmax: millimolar {init: 0.07};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var kmtrpn: millimolar {init: 0.0005};
    // isVersionOf: http://identifiers.org/go/GO:0016529
    // isVersionOf: http://identifiers.org/go/GO:0033017
    // isVersionOf: http://identifiers.org/fma/FMA:67196
    var BSRmax: millimolar {init: 0.047};
    // isVersionOf: http://identifiers.org/go/GO:0016529
    // isVersionOf: http://identifiers.org/go/GO:0033017
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    var KmBSR: millimolar {init: 0.00087};
    // isVersionOf: http://identifiers.org/go/GO:0042383
    // isVersionOf: http://identifiers.org/fma/FMA:67964
    var BSLmax: millimolar {init: 1.124};
    // isVersionOf: http://identifiers.org/go/GO:0042383
    // isVersionOf: http://identifiers.org/fma/FMA:67964
    var KmBSL: millimolar {init: 0.0087};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var csqnmax: millimolar {init: 10};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var kmcsqn: millimolar {init: 0.8};
    var nai: millimolar {init: 7, pub: out};
    var nass: millimolar {init: 7, pub: out};
    var ki: millimolar {init: 145, pub: out};
    var kss: millimolar {init: 145, pub: out};
    var cass: millimolar {init: 1e-4, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    var cansr: millimolar {init: 1.2, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    var cajsr: millimolar {init: 1.2, pub: out};
    var cai: millimolar {init: 1e-4, pub: out};
    var celltype: dimensionless {pub: in};
    var Acap: centimeter_squared {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var INa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var INaL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var INaCa_i: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var INaCa_ss: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var ICaNa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    var INaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var INab: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var IK1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var IKb: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var IKr: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var IKs: microA_per_microF {pub: in};
    var Istim: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Ito: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var ICab: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var IpCa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var ICaL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:67225
    var JdiffNa: millimolar_per_millisecond {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:67225
    var Jdiff: millimolar_per_millisecond {pub: in};
    var Jup: millimolar_per_millisecond {pub: in};
    var JdiffK: millimolar_per_millisecond {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    // isVersionOf: http://identifiers.org/go/GO:0005219
    var Jrel: millimolar_per_millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0016529
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:67225
    var Jtr: millimolar_per_millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var ICaK: microA_per_microF {pub: in};
    var time: millisecond {pub: in};
    var vmyo: microliter {pub: in};
    var vnsr: microliter {pub: in};
    var vss: microliter {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    // isVersionOf: http://identifiers.org/go/GO:0014701
    var vjsr: microliter {pub: in};
    var Bcai: dimensionless;
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var Bcajsr: dimensionless;
    var Bcass: dimensionless;
    var cm: microF_per_centimeter_squared {init: 1, pub: out};
    cmdnmax = sel
      case celltype == 1{dimensionless}:
        cmdnmax_b*1.3{dimensionless};
      otherwise:
        cmdnmax_b;
    endsel;
    ode(nai, time) = -(INa+INaL+3{dimensionless}*INaCa_i+3{dimensionless}*INaK+INab)*Acap*cm/(F*vmyo)+JdiffNa*vss/vmyo;
    ode(nass, time) = -(ICaNa+3{dimensionless}*INaCa_ss)*cm*Acap/(F*vss)-JdiffNa;
    ode(ki, time) = -(Ito+IKr+IKs+IK1+IKb+Istim-2{dimensionless}*INaK)*cm*Acap/(F*vmyo)+JdiffK*vss/vmyo;
    ode(kss, time) = -ICaK*cm*Acap/(F*vss)-JdiffK;
    Bcai = 1{dimensionless}/(1{dimensionless}+cmdnmax*kmcmdn/sqr(kmcmdn+cai)+trpnmax*kmtrpn/sqr(kmtrpn+cai));
    ode(cai, time) = Bcai*(-(IpCa+ICab-2{dimensionless}*INaCa_i)*cm*Acap/(2{dimensionless}*F*vmyo)-Jup*vnsr/vmyo+Jdiff*vss/vmyo);
    Bcass = 1{dimensionless}/(1{dimensionless}+BSRmax*KmBSR/sqr(KmBSR+cass)+BSLmax*KmBSL/sqr(KmBSL+cass));
    ode(cass, time) = Bcass*(-(ICaL-2{dimensionless}*INaCa_ss)*cm*Acap/(2{dimensionless}*F*vss)+Jrel*vjsr/vss-Jdiff);
    ode(cansr, time) = Jup-Jtr*vjsr/vnsr;
    Bcajsr = 1{dimensionless}/(1{dimensionless}+csqnmax*kmcsqn/sqr(kmcsqn+cajsr));
    ode(cajsr, time) = Bcajsr*(Jtr-Jrel);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp reversal_potentials as
    var PKNa: dimensionless {init: 0.01833};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38634
    var ENa: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var EK: millivolt {pub: out};
    var EKs: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var nao: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var ko: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var nai: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var ki: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    ENa = R*T/F*ln(nao/nai);
    EK = R*T/F*ln(ko/ki);
    EKs = R*T/F*ln((ko+PKNa*nao)/(ki+PKNa*nai));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp INa as
    var mss: dimensionless;
    var tm: millisecond {pub: out};
    var mssV1: millivolt {init: 39.57};
    var mssV2: millivolt {init: 9.871};
    var mtV1: millivolt {init: 11.64};
    var mtV2: millivolt {init: 34.77};
    var mtD1: dimensionless {init: 6.765};
    var mtD2: dimensionless {init: 8.552};
    var mtV3: millivolt {init: 77.42};
    var mtV4: millivolt {init: 5.955};
    var m: dimensionless {init: 0};
    var time: millisecond {pub: in};
    var hss: dimensionless;
    var thf: millisecond;
    var ths: millisecond;
    var hssV1: millivolt {init: 82.9};
    var hssV2: millivolt {init: 6.086};
    var Ahs: dimensionless;
    var Ahf: dimensionless {init: 0.99};
    var hf: dimensionless {init: 1};
    var hs: dimensionless {init: 1};
    var h: dimensionless;
    var GNa: milliS_per_microF {init: 75};
    var jss: dimensionless;
    var tj: millisecond;
    var j: dimensionless {init: 1};
    var hssp: dimensionless;
    var thsp: millisecond;
    var hsp: dimensionless {init: 1};
    var hp: dimensionless;
    var tjp: millisecond;
    var jp: dimensionless {init: 1};
    var fINap: dimensionless;
    var INa: microA_per_microF {pub: out};
    var v: millivolt {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    mss = 1{dimensionless}/(1{dimensionless}+exp(-(v+mssV1)/mssV2));
    tm = 1{millisecond}/(mtD1*exp((v+mtV1)/mtV2)+mtD2*exp(-(v+mtV3)/mtV4));
    ode(m, time) = (mss-m)/tm;
    hss = 1{dimensionless}/(1{dimensionless}+exp((v+hssV1)/hssV2));
    thf = 1{millisecond}/(1.432e-5{dimensionless}*exp(-(v+1.196{millivolt})/6.285{millivolt})+6.149{dimensionless}*exp((v+0.5096{millivolt})/20.27{millivolt}));
    ths = 1{millisecond}/(0.009794{dimensionless}*exp(-(v+17.95{millivolt})/28.05{millivolt})+0.3343{dimensionless}*exp((v+5.73{millivolt})/56.66{millivolt}));
    Ahs = 1{dimensionless}-Ahf;
    ode(hf, time) = (hss-hf)/thf;
    ode(hs, time) = (hss-hs)/ths;
    h = Ahf*hf+Ahs*hs;
    jss = hss;
    tj = 2.038{millisecond}+1{millisecond}/(0.02136{dimensionless}*exp(-(v+100.6{millivolt})/8.281{millivolt})+0.3052{dimensionless}*exp((v+0.9941{millivolt})/38.45{millivolt}));
    ode(j, time) = (jss-j)/tj;
    hssp = 1{dimensionless}/(1{dimensionless}+exp((v+89.1{millivolt})/6.086{millivolt}));
    thsp = 3{dimensionless}*ths;
    ode(hsp, time) = (hssp-hsp)/thsp;
    hp = Ahf*hf+Ahs*hsp;
    tjp = 1.46{dimensionless}*tj;
    ode(jp, time) = (jss-jp)/tjp;
    fINap = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INa = GNa*(v-ENa)*pow(m, 3{dimensionless})*((1{dimensionless}-fINap)*h*j+fINap*hp*jp);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/chebi/CHEBI:38634
  def comp INaL as
    var mLss: dimensionless;
    var tm: millisecond {pub: in};
    var tmL: millisecond;
    var mL: dimensionless {init: 0};
    var thL: millisecond {init: 200};
    var hLss: dimensionless;
    var v: millivolt {pub: in};
    var hL: dimensionless {init: 1};
    var hLssp: dimensionless;
    var thLp: millisecond;
    var hLp: dimensionless {init: 1};
    var GNaL_b: milliS_per_microF {init: 0.0075};
    var GNaL: milliS_per_microF;
    var fINaLp: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var KmCaMK: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var CaMKa: millimolar {pub: in};
    var ENa: millivolt {pub: in};
    var INaL: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var time: millisecond {pub: in};
    mLss = 1{dimensionless}/(1{dimensionless}+exp(-(v+42.85{millivolt})/5.264{millivolt}));
    tmL = tm;
    ode(mL, time) = (mLss-mL)/tmL;
    hLss = 1{dimensionless}/(1{dimensionless}+exp((v+87.61{millivolt})/7.488{millivolt}));
    ode(hL, time) = (hLss-hL)/thL;
    hLssp = 1{dimensionless}/(1{dimensionless}+exp((v+93.81{millivolt})/7.488{millivolt}));
    thLp = 3{dimensionless}*thL;
    ode(hLp, time) = (hLssp-hLp)/thLp;
    GNaL = sel
      case celltype == 1{dimensionless}:
        GNaL_b*0.6{dimensionless};
      otherwise:
        GNaL_b;
    endsel;
    fINaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    INaL = GNaL*(v-ENa)*mL*((1{dimensionless}-fINaLp)*hL+fINaLp*hLp);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Ito as
    var Gto_b: milliS_per_microF {init: 0.02};
    var ass: dimensionless;
    var ta: millisecond;
    var a: dimensionless {init: 0};
    var time: millisecond {pub: in};
    var v: millivolt {pub: in};
    var EK: millivolt {pub: in};
    var iss: dimensionless;
    var delta_epi: dimensionless;
    var tiF_b: millisecond;
    var tiS_b: millisecond;
    var tiF: millisecond;
    var tiS: millisecond;
    var AiF: dimensionless;
    var AiS: dimensionless;
    var iF: dimensionless {init: 1};
    var iS: dimensionless {init: 1};
    var i: dimensionless;
    var assp: dimensionless;
    var ap: dimensionless {init: 0};
    var dti_develop: dimensionless;
    var dti_recover: dimensionless;
    var tiFp: millisecond;
    var tiSp: millisecond;
    var iFp: dimensionless {init: 1};
    var iSp: dimensionless {init: 1};
    var ip: dimensionless;
    var Gto: milliS_per_microF;
    var fItop: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Ito: microA_per_microF {pub: out};
    var celltype: dimensionless {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    ass = 1{dimensionless}/(1{dimensionless}+exp(-(v-14.34{millivolt})/14.82{millivolt}));
    ta = 1.0515{millisecond}/(1{dimensionless}/(1.2089{dimensionless}*(1{dimensionless}+exp(-(v-18.4099{millivolt})/29.3814{millivolt})))+3.5{dimensionless}/(1{dimensionless}+exp((v+100{millivolt})/29.3814{millivolt})));
    ode(a, time) = (ass-a)/ta;
    iss = 1{dimensionless}/(1{dimensionless}+exp((v+43.94{millivolt})/5.711{millivolt}));
    delta_epi = sel
      case celltype == 1{dimensionless}:
        1{dimensionless}-0.95{dimensionless}/(1{dimensionless}+exp((v+70{millivolt})/5{millivolt}));
      otherwise:
        1{dimensionless};
    endsel;
    tiF_b = 4.562{millisecond}+1{millisecond}/(0.3933{dimensionless}*exp(-(v+100{millivolt})/100{millivolt})+0.08004{dimensionless}*exp((v+50{millivolt})/16.59{millivolt}));
    tiS_b = 23.62{millisecond}+1{millisecond}/(0.001416{dimensionless}*exp(-(v+96.52{millivolt})/59.05{millivolt})+1.78e-8{dimensionless}*exp((v+114.1{millivolt})/8.079{millivolt}));
    tiF = tiF_b*delta_epi;
    tiS = tiS_b*delta_epi;
    AiF = 1{dimensionless}/(1{dimensionless}+exp((v-213.6{millivolt})/151.2{millivolt}));
    AiS = 1{dimensionless}-AiF;
    ode(iF, time) = (iss-iF)/tiF;
    ode(iS, time) = (iss-iS)/tiS;
    i = AiF*iF+AiS*iS;
    assp = 1{dimensionless}/(1{dimensionless}+exp(-(v-24.34{millivolt})/14.82{millivolt}));
    ode(ap, time) = (assp-ap)/ta;
    dti_develop = 1.354{dimensionless}+1e-4{dimensionless}/(exp((v-167.4{millivolt})/15.89{millivolt})+exp(-(v-12.23{millivolt})/0.2154{millivolt}));
    dti_recover = 1{dimensionless}-0.5{dimensionless}/(1{dimensionless}+exp((v+70{millivolt})/20{millivolt}));
    tiFp = dti_develop*dti_recover*tiF;
    tiSp = dti_develop*dti_recover*tiS;
    ode(iFp, time) = (iss-iFp)/tiFp;
    ode(iSp, time) = (iss-iSp)/tiSp;
    ip = AiF*iFp+AiS*iSp;
    Gto = sel
      case celltype == 1{dimensionless}:
        Gto_b*4{dimensionless};
      case celltype == 2{dimensionless}:
        Gto_b*4{dimensionless};
      otherwise:
        Gto_b;
    endsel;
    fItop = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Ito = Gto*(v-EK)*((1{dimensionless}-fItop)*a*i+fItop*ap*ip);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp ICaL as
    var Kmn: millimolar {init: 0.002};
    var k2n: per_millisecond {init: 1000};
    var PCa_b: dimensionless {init: 0.0001};
    var dss: dimensionless;
    var d: dimensionless {init: 0};
    var fss: dimensionless;
    var Aff: dimensionless;
    var Afs: dimensionless;
    var ff: dimensionless {init: 1};
    var fs: dimensionless {init: 1};
    var f: dimensionless;
    var fcass: dimensionless;
    var Afcaf: dimensionless;
    var Afcas: dimensionless;
    var fcaf: dimensionless {init: 1};
    var fcas: dimensionless {init: 1};
    var fca: dimensionless;
    var jca: dimensionless {init: 1};
    var ffp: dimensionless {init: 1};
    var fp: dimensionless;
    var fcafp: dimensionless {init: 1};
    var fcap: dimensionless;
    var km2n: per_millisecond;
    var anca: dimensionless;
    var nca: dimensionless {init: 0};
    var PhiCaL: dimensionless;
    var PhiCaNa: dimensionless;
    var PhiCaK: dimensionless;
    var PCa: dimensionless;
    var celltype: dimensionless {pub: in};
    var PCap: dimensionless;
    var PCaNa: dimensionless;
    var PCaK: dimensionless;
    var PCaNap: dimensionless;
    var PCaKp: dimensionless;
    var fICaLp: dimensionless;
    var td: millisecond;
    var tff: millisecond;
    var tfs: millisecond;
    var tfcaf: millisecond;
    var tfcas: millisecond;
    var tjca: millisecond;
    var tffp: millisecond;
    var tfcafp: millisecond;
    var ICaL: microA_per_microF {pub: out};
    var ICaNa: microA_per_microF {pub: out};
    var ICaK: microA_per_microF {pub: out};
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var cass: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    var nao: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    dss = 1{dimensionless}/(1{dimensionless}+exp(-(v+3.94{millivolt})/4.23{millivolt}));
    td = 0.6{millisecond}+1{millisecond}/(exp(-0.05{per_millivolt}*(v+6{millivolt}))+exp(0.09{per_millivolt}*(v+14{millivolt})));
    ode(d, time) = (dss-d)/td;
    fss = 1{dimensionless}/(1{dimensionless}+exp((v+19.58{millivolt})/3.696{millivolt}));
    tff = 7{millisecond}+1{millisecond}/(0.0045{dimensionless}*exp(-(v+20{millivolt})/10{millivolt})+0.0045{dimensionless}*exp((v+20{millivolt})/10{millivolt}));
    tfs = 1000{millisecond}+1{millisecond}/(0.000035{dimensionless}*exp(-(v+5{millivolt})/4{millivolt})+0.000035{dimensionless}*exp((v+5{millivolt})/6{millivolt}));
    Aff = 0.6{dimensionless};
    Afs = 1{dimensionless}-Aff;
    ode(ff, time) = (fss-ff)/tff;
    ode(fs, time) = (fss-fs)/tfs;
    f = Aff*ff+Afs*fs;
    fcass = fss;
    tfcaf = 7{millisecond}+1{millisecond}/(0.04{dimensionless}*exp(-(v-4{millivolt})/7{millivolt})+0.04{dimensionless}*exp((v-4{millivolt})/7{millivolt}));
    tfcas = 100{millisecond}+1{millisecond}/(0.00012{dimensionless}*exp(-v/3{millivolt})+0.00012{dimensionless}*exp(v/7{millivolt}));
    Afcaf = 0.3{dimensionless}+0.6{dimensionless}/(1{dimensionless}+exp((v-10{millivolt})/10{millivolt}));
    Afcas = 1{dimensionless}-Afcaf;
    ode(fcaf, time) = (fcass-fcaf)/tfcaf;
    ode(fcas, time) = (fcass-fcas)/tfcas;
    fca = Afcaf*fcaf+Afcas*fcas;
    tjca = 75{millisecond};
    ode(jca, time) = (fcass-jca)/tjca;
    tffp = 2.5{dimensionless}*tff;
    ode(ffp, time) = (fss-ffp)/tffp;
    fp = Aff*ffp+Afs*fs;
    tfcafp = 2.5{dimensionless}*tfcaf;
    ode(fcafp, time) = (fcass-fcafp)/tfcafp;
    fcap = Afcaf*fcafp+Afcas*fcas;
    km2n = jca*1{per_millisecond};
    anca = 1{dimensionless}/(k2n/km2n+pow(1{dimensionless}+Kmn/cass, 4{dimensionless}));
    ode(nca, time) = anca*k2n-nca*km2n;
    PhiCaL = 4{per_millivolt}*vffrt*(cass*exp(2{dimensionless}*vfrt)-0.341{per_millimolar}*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
    PhiCaNa = 1{dimensionless}*vffrt*(0.75{dimensionless}*nass*exp(1{dimensionless}*vfrt)-0.75{dimensionless}*nao)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PhiCaK = 1{dimensionless}*vffrt*(0.75{dimensionless}*kss*exp(1{dimensionless}*vfrt)-0.75{dimensionless}*ko)/(exp(1{dimensionless}*vfrt)-1{dimensionless});
    PCa = sel
      case celltype == 1{dimensionless}:
        PCa_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        PCa_b*2.5{dimensionless};
      otherwise:
        PCa_b;
    endsel;
    PCap = 1.1{dimensionless}*PCa;
    PCaNa = 0.00125{dimensionless}*PCa;
    PCaK = 3.574e-4{dimensionless}*PCa;
    PCaNap = 0.00125{dimensionless}*PCap;
    PCaKp = 3.574e-4{dimensionless}*PCap;
    fICaLp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    ICaL = (1{dimensionless}-fICaLp)*PCa*PhiCaL*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCap*PhiCaL*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
    ICaNa = (1{dimensionless}-fICaLp)*PCaNa*PhiCaNa*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCaNap*PhiCaNa*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
    ICaK = (1{dimensionless}-fICaLp)*PCaK*PhiCaK*d*(f*(1{dimensionless}-nca)+jca*fca*nca)+fICaLp*PCaKp*PhiCaK*d*(fp*(1{dimensionless}-nca)+jca*fcap*nca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005251
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp IKr as
    var GKr_b: milliS_per_microF {init: 0.046};
    var GKr: milliS_per_microF;
    var xrss: dimensionless;
    var txrf: millisecond;
    var txrs: millisecond;
    var Axrf: dimensionless;
    var Axrs: dimensionless;
    var xrf: dimensionless {init: 0};
    var xrs: dimensionless {init: 0};
    var xr: dimensionless;
    var rkr: dimensionless;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var IKr: microA_per_microF {pub: out};
    xrss = 1{dimensionless}/(1{dimensionless}+exp(-(v+8.337{millivolt})/6.789{millivolt}));
    txrf = 12.98{millisecond}+1{millisecond}/(0.3652{dimensionless}*exp((v-31.66{millivolt})/3.869{millivolt})+4.123e-5{dimensionless}*exp(-(v-47.78{millivolt})/20.38{millivolt}));
    txrs = 1.865{millisecond}+1{millisecond}/(0.06629{dimensionless}*exp((v-34.7{millivolt})/7.355{millivolt})+1.128e-5{dimensionless}*exp(-(v-29.74{millivolt})/25.94{millivolt}));
    Axrf = 1{dimensionless}/(1{dimensionless}+exp((v+54.81{millivolt})/38.21{millivolt}));
    Axrs = 1{dimensionless}-Axrf;
    ode(xrf, time) = (xrss-xrf)/txrf;
    ode(xrs, time) = (xrss-xrs)/txrs;
    xr = Axrf*xrf+Axrs*xrs;
    rkr = 1{dimensionless}/(1{dimensionless}+exp((v+55{millivolt})/75{millivolt}))*1{dimensionless}/(1{dimensionless}+exp((v-10{millivolt})/30{millivolt}));
    GKr = sel
      case celltype == 1{dimensionless}:
        GKr_b*1.3{dimensionless};
      case celltype == 2{dimensionless}:
        GKr_b*0.8{dimensionless};
      otherwise:
        GKr_b;
    endsel;
    IKr = GKr*sqrt(ko/5.4{millimolar})*xr*rkr*(v-EK);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005251
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp IKs as
    var GKs_b: milliS_per_microF {init: 0.0034};
    var GKs: milliS_per_microF;
    var xs1ss: dimensionless;
    var xs2ss: dimensionless;
    var txs1: millisecond;
    var xs1: dimensionless {init: 0};
    var xs2: dimensionless {init: 0};
    var KsCa: dimensionless;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EKs: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005251
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var IKs: microA_per_microF {pub: out};
    var txs2: millisecond;
    var cai: millimolar {pub: in};
    xs1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+11.6{millivolt})/8.932{millivolt}));
    txs1 = 817.3{millisecond}+1{millisecond}/(2.326e-4{dimensionless}*exp((v+48.28{millivolt})/17.8{millivolt})+0.001292{dimensionless}*exp(-(v+210{millivolt})/230{millivolt}));
    ode(xs1, time) = (xs1ss-xs1)/txs1;
    xs2ss = xs1ss;
    txs2 = 1{millisecond}/(0.01{dimensionless}*exp((v-50{millivolt})/20{millivolt})+0.0193{dimensionless}*exp(-(v+66.54{millivolt})/31{millivolt}));
    ode(xs2, time) = (xs2ss-xs2)/txs2;
    KsCa = 1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{millimolar}/cai, 1.4{dimensionless}));
    GKs = sel
      case celltype == 1{dimensionless}:
        GKs_b*1.4{dimensionless};
      otherwise:
        GKs_b;
    endsel;
    IKs = GKs*KsCa*xs1*xs2*(v-EKs);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005241
  // isVersionOf: http://identifiers.org/go/GO:0005242
  def comp IK1 as
    var GK1: milliS_per_microF;
    var GK1_b: milliS_per_microF {init: 0.1908};
    var xk1ss: dimensionless;
    var txk1: millisecond;
    var xk1: dimensionless {init: 1};
    var rk1: millisecond;
    var v: millivolt {pub: in};
    var time: millisecond {pub: in};
    var celltype: dimensionless {pub: in};
    var EK: millivolt {pub: in};
    var ko: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var IK1: microA_per_microF {pub: out};
    xk1ss = 1{dimensionless}/(1{dimensionless}+exp(-(v+2.5538{millivolt_per_millimole}*ko+144.59{millivolt})/(1.5692{millivolt_per_millimole}*ko+3.8115{millivolt})));
    txk1 = 122.2{millisecond}/(exp(-(v+127.2{millivolt})/20.36{millivolt})+exp((v+236.8{millivolt})/69.33{millivolt}));
    ode(xk1, time) = (xk1ss-xk1)/txk1;
    rk1 = 1{dimensionless}/(1{dimensionless}+exp((v+105.8{millivolt}-2.6{millivolt_per_millimole}*ko)/9.493{millivolt}));
    GK1 = sel
      case celltype == 1{dimensionless}:
        GK1_b*1.2{dimensionless};
      case celltype == 2{dimensionless}:
        GK1_b*1.3{dimensionless};
      otherwise:
        GK1_b;
    endsel;
    IK1 = GK1*sqrt(ko)*rk1*xk1*(v-EK);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp INaCa_i as
    var kna1: per_millisecond {init: 15};
    var kna2: per_millisecond {init: 5};
    var kna3: per_millisecond {init: 88.12};
    var kasymm: dimensionless {init: 12.5};
    var wna: dimensionless {init: 6e4};
    var wca: dimensionless {init: 6e4};
    var wnaca: dimensionless {init: 5e3};
    var kcaon: per_millisecond {init: 1.5e6};
    var kcaoff: per_millisecond {init: 5e3};
    var qna: dimensionless {init: 0.5224};
    var qca: dimensionless {init: 0.167};
    var hna: dimensionless;
    var hca: dimensionless;
    var zca: dimensionless {pub: in};
    var KmCaAct: millimolar {init: 150e-6};
    var zna: dimensionless {pub: in};
    var Gncx_b: milliS_per_microF {init: 0.0008};
    var Gncx: milliS_per_microF;
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var v: millivolt {pub: in};
    var nai: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var cai: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var h1_i: dimensionless;
    var h2_i: dimensionless;
    var h3_i: dimensionless;
    var h4_i: dimensionless;
    var h5_i: dimensionless;
    var h6_i: dimensionless;
    var h7_i: dimensionless;
    var h8_i: dimensionless;
    var h9_i: dimensionless;
    var h10_i: dimensionless;
    var h11_i: dimensionless;
    var h12_i: dimensionless;
    var k1_i: dimensionless;
    var k2_i: dimensionless;
    var k3p_i: dimensionless;
    var k3pp_i: dimensionless;
    var k3_i: dimensionless;
    var k4_i: dimensionless;
    var k4p_i: dimensionless;
    var k4pp_i: dimensionless;
    var k5_i: dimensionless;
    var k6_i: dimensionless;
    var k7_i: dimensionless;
    var k8_i: dimensionless;
    var x1_i: dimensionless;
    var x2_i: dimensionless;
    var x3_i: dimensionless;
    var x4_i: dimensionless;
    var E1_i: dimensionless;
    var E2_i: dimensionless;
    var E3_i: dimensionless;
    var E4_i: dimensionless;
    var allo_i: dimensionless;
    var JncxNa_i: millimolar_per_millisecond;
    var JncxCa_i: millimolar_per_millisecond;
    var celltype: dimensionless {pub: in};
    var INaCa_i: microA_per_microF {pub: out};
    var INaCa_ss: microA_per_microF {pub: out};
    var h1_ss: dimensionless;
    var h2_ss: dimensionless;
    var h3_ss: dimensionless;
    var h4_ss: dimensionless;
    var h5_ss: dimensionless;
    var h6_ss: dimensionless;
    var h7_ss: dimensionless;
    var h8_ss: dimensionless;
    var h9_ss: dimensionless;
    var h10_ss: dimensionless;
    var h11_ss: dimensionless;
    var h12_ss: dimensionless;
    var k1_ss: dimensionless;
    var k2_ss: dimensionless;
    var k3p_ss: dimensionless;
    var k3pp_ss: dimensionless;
    var k3_ss: dimensionless;
    var k4_ss: dimensionless;
    var k4p_ss: dimensionless;
    var k4pp_ss: dimensionless;
    var k5_ss: dimensionless;
    var k6_ss: dimensionless;
    var k7_ss: dimensionless;
    var k8_ss: dimensionless;
    var x1_ss: dimensionless;
    var x2_ss: dimensionless;
    var x3_ss: dimensionless;
    var x4_ss: dimensionless;
    var E1_ss: dimensionless;
    var E2_ss: dimensionless;
    var E3_ss: dimensionless;
    var E4_ss: dimensionless;
    var allo_ss: dimensionless;
    var JncxNa_ss: millimolar_per_millisecond;
    var JncxCa_ss: millimolar_per_millisecond;
    hca = exp(qca*v*F/(R*T));
    hna = exp(qna*v*F/(R*T));
    h1_i = 1{dimensionless}+nai/kna3*(1{dimensionless}+hna);
    h2_i = nai*hna/(kna3*h1_i);
    h3_i = 1{dimensionless}/h1_i;
    h4_i = 1{dimensionless}+nai/kna1*(1{dimensionless}+nai/kna2);
    h5_i = nai*nai/(h4_i*kna1*kna2);
    h6_i = 1{dimensionless}/h4_i;
    h7_i = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_i = nao/(kna3*hna*h7_i);
    h9_i = 1{dimensionless}/h7_i;
    h10_i = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_i = nao*nao/(h10_i*kna1*kna2);
    h12_i = 1{dimensionless}/h10_i;
    k1_i = h12_i*cao*kcaon;
    k2_i = kcaoff;
    k3p_i = h9_i*wca;
    k3pp_i = h8_i*wnaca;
    k3_i = k3p_i+k3pp_i;
    k4p_i = h3_i*wca/hca;
    k4pp_i = h2_i*wnaca;
    k4_i = k4p_i+k4pp_i;
    k5_i = kcaoff;
    k6_i = h6_i*cai*kcaon;
    k7_i = h5_i*h2_i*wna;
    k8_i = h8_i*h11_i*wna;
    x1_i = k2_i*k4_i*(k7_i+k6_i)+k5_i*k7_i*(k2_i+k3_i);
    x2_i = k1_i*k7_i*(k4_i+k5_i)+k4_i*k6_i*(k1_i+k8_i);
    x3_i = k1_i*k3_i*(k7_i+k6_i)+k8_i*k6_i*(k2_i+k3_i);
    x4_i = k2_i*k8_i*(k4_i+k5_i)+k3_i*k5_i*(k1_i+k8_i);
    E1_i = x1_i/(x1_i+x2_i+x3_i+x4_i);
    E2_i = x2_i/(x1_i+x2_i+x3_i+x4_i);
    E3_i = x3_i/(x1_i+x2_i+x3_i+x4_i);
    E4_i = x4_i/(x1_i+x2_i+x3_i+x4_i);
    allo_i = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cai));
    JncxNa_i = 3{dimensionless}*(E4_i*k7_i-E1_i*k8_i)+E3_i*k4pp_i-E2_i*k3pp_i;
    JncxCa_i = E2_i*k2_i-E1_i*k1_i;
    Gncx = sel
      case celltype == 1{dimensionless}:
        Gncx_b*1.1{dimensionless};
      case celltype == 2{dimensionless}:
        Gncx_b*1.4{dimensionless};
      otherwise:
        Gncx_b;
    endsel;
    INaCa_i = 0.8{dimensionless}*Gncx*allo_i*(zna*JncxNa_i+zca*JncxCa_i);
    h1_ss = 1{dimensionless}+nass/kna3*(1{dimensionless}+hna);
    h2_ss = nass*hna/(kna3*h1_ss);
    h3_ss = 1{dimensionless}/h1_ss;
    h4_ss = 1{dimensionless}+nass/kna1*(1{dimensionless}+nass/kna2);
    h5_ss = nass*nass/(h4_ss*kna1*kna2);
    h6_ss = 1{dimensionless}/h4_ss;
    h7_ss = 1{dimensionless}+nao/kna3*(1{dimensionless}+1{dimensionless}/hna);
    h8_ss = nao/(kna3*hna*h7_ss);
    h9_ss = 1{dimensionless}/h7_ss;
    h10_ss = kasymm+1{dimensionless}+nao/kna1*(1{dimensionless}+nao/kna2);
    h11_ss = nao*nao/(h10_ss*kna1*kna2);
    h12_ss = 1{dimensionless}/h10_ss;
    k1_ss = h12_ss*cao*kcaon;
    k2_ss = kcaoff;
    k3p_ss = h9_ss*wca;
    k3pp_ss = h8_ss*wnaca;
    k3_ss = k3p_ss+k3pp_ss;
    k4p_ss = h3_ss*wca/hca;
    k4pp_ss = h2_ss*wnaca;
    k4_ss = k4p_ss+k4pp_ss;
    k5_ss = kcaoff;
    k6_ss = h6_ss*cass*kcaon;
    k7_ss = h5_ss*h2_ss*wna;
    k8_ss = h8_ss*h11_ss*wna;
    x1_ss = k2_ss*k4_ss*(k7_ss+k6_ss)+k5_ss*k7_ss*(k2_ss+k3_ss);
    x2_ss = k1_ss*k7_ss*(k4_ss+k5_ss)+k4_ss*k6_ss*(k1_ss+k8_ss);
    x3_ss = k1_ss*k3_ss*(k7_ss+k6_ss)+k8_ss*k6_ss*(k2_ss+k3_ss);
    x4_ss = k2_ss*k8_ss*(k4_ss+k5_ss)+k3_ss*k5_ss*(k1_ss+k8_ss);
    E1_ss = x1_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E2_ss = x2_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E3_ss = x3_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    E4_ss = x4_ss/(x1_ss+x2_ss+x3_ss+x4_ss);
    allo_ss = 1{dimensionless}/(1{dimensionless}+sqr(KmCaAct/cass));
    JncxNa_ss = 3{dimensionless}*(E4_ss*k7_ss-E1_ss*k8_ss)+E3_ss*k4pp_ss-E2_ss*k3pp_ss;
    JncxCa_ss = E2_ss*k2_ss-E1_ss*k1_ss;
    INaCa_ss = 0.2{dimensionless}*Gncx*allo_ss*(zna*JncxNa_ss+zca*JncxCa_ss);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005391
  // isVersionOf: http://identifiers.org/go/GO:0005890
  def comp INaK as
    var k1p: per_millisecond {init: 949.5};
    var k1m: per_millisecond {init: 182.4};
    var k2p: per_millisecond {init: 687.2};
    var k2m: per_millisecond {init: 39.4};
    var k3p: per_millisecond {init: 1899};
    var k3m: per_millisecond {init: 79300};
    var k4p: per_millisecond {init: 639};
    var k4m: per_millisecond {init: 40};
    var Knai0: millimolar {init: 9.073};
    var Knao0: millimolar {init: 27.78};
    var delta: millivolt {init: -0.155};
    var Kki: per_millisecond {init: 0.5};
    var Kko: per_millisecond {init: 0.3582};
    var MgADP: millimolar {init: 0.05};
    var MgATP: millimolar {init: 9.8};
    var Kmgatp: millimolar {init: 1.698e-7};
    var H: millimolar {init: 1e-7};
    var eP: dimensionless {init: 4.2};
    var Khp: millimolar {init: 1.698e-7};
    var Knap: millimolar {init: 224};
    var Kxkur: millimolar {init: 292};
    var zk: dimensionless {pub: in};
    var zna: dimensionless {pub: in};
    var Pnak_b: milliS_per_microF {init: 30};
    var Pnak: milliS_per_microF;
    var celltype: dimensionless {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var v: millivolt {pub: in};
    var nai: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var ko: millimolar {pub: in};
    var Knai: millimolar;
    var Knao: millimolar;
    var P: dimensionless;
    var a1: dimensionless;
    var b1: dimensionless;
    var a2: dimensionless;
    var b2: dimensionless;
    var a3: dimensionless;
    var b3: dimensionless;
    var a4: dimensionless;
    var b4: dimensionless;
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var E1: dimensionless;
    var E2: dimensionless;
    var E3: dimensionless;
    var E4: dimensionless;
    var JnakNa: millimolar_per_millisecond;
    var JnakK: millimolar_per_millisecond;
    var INaK: microA_per_microF {pub: out};
    Knai = Knai0*exp(delta*v*F/(3{dimensionless}*R*T));
    Knao = Knao0*exp((1{dimensionless}-delta)*v*F/(3{dimensionless}*R*T));
    P = eP/(1{dimensionless}+H/Khp+nai/Knap+ki/Kxkur);
    a1 = k1p*pow(nai/Knai, 3{dimensionless})/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1{dimensionless});
    b1 = k1m*MgADP;
    a2 = k2p;
    b2 = k2m*pow(nao/Knao, 3{dimensionless})/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    a3 = k3p*sqr(ko/Kko)/(pow(1{dimensionless}+nao/Knao, 3{dimensionless})+sqr(1{dimensionless}+ko/Kko)-1{dimensionless});
    b3 = k3m*P*H/(1{dimensionless}+MgATP/Kmgatp);
    a4 = k4p*MgATP/Kmgatp/(1{dimensionless}+MgATP/Kmgatp);
    b4 = k4m*sqr(ki/Kki)/(pow(1{dimensionless}+nai/Knai, 3{dimensionless})+sqr(1{dimensionless}+ki/Kki)-1{dimensionless});
    x1 = a4*a1*a2+b2*b4*b3+a2*b4*b3+b3*a1*a2;
    x2 = b2*b1*b4+a1*a2*a3+a3*b1*b4+a2*a3*b4;
    x3 = a2*a3*a4+b3*b2*b1+b2*b1*a4+a3*a4*b1;
    x4 = b4*b3*b2+a3*a4*a1+b2*a4*a1+b3*b2*a1;
    E1 = x1/(x1+x2+x3+x4);
    E2 = x2/(x1+x2+x3+x4);
    E3 = x3/(x1+x2+x3+x4);
    E4 = x4/(x1+x2+x3+x4);
    JnakNa = 3{dimensionless}*(E1*a3-E2*b3);
    JnakK = 2{dimensionless}*(E4*b1-E3*a1);
    Pnak = sel
      case celltype == 1{dimensionless}:
        Pnak_b*0.9{dimensionless};
      case celltype == 2{dimensionless}:
        Pnak_b*0.7{dimensionless};
      otherwise:
        Pnak_b;
    endsel;
    INaK = Pnak*(zna*JnakNa+zk*JnakK);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0022841
  def comp IKb as
    var xkb: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var GKb_b: milliS_per_microF {init: 0.003};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var GKb: milliS_per_microF;
    var v: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var EK: millivolt {pub: in};
    var celltype: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var IKb: microA_per_microF {pub: out};
    xkb = 1{dimensionless}/(1{dimensionless}+exp(-(v-14.48{millivolt})/18.34{millivolt}));
    GKb = sel
      case celltype == 1{dimensionless}:
        GKb_b*0.6{dimensionless};
      otherwise:
        GKb_b;
    endsel;
    IKb = GKb*xkb*(v-EK);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp INab as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var PNab: milliS_per_microF {init: 3.75e-10};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var INab: microA_per_microF {pub: out};
    var nai: millimolar {pub: in};
    var nao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    INab = PNab*vffrt*(nai*exp(vfrt)-nao)/(exp(vfrt)-1{dimensionless});
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp ICab as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var PCab: milliS_per_microF {init: 2.5e-8};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var ICab: microA_per_microF {pub: out};
    var cai: millimolar {pub: in};
    var cao: millimolar {pub: in};
    var vffrt: coulomb_per_mole {pub: in};
    var vfrt: dimensionless {pub: in};
    ICab = PCab*4{dimensionless}*vffrt*(cai*exp(2{dimensionless}*vfrt)-0.341{dimensionless}*cao)/(exp(2{dimensionless}*vfrt)-1{dimensionless});
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0042383
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0051480
  // isVersionOf: http://identifiers.org/go/GO:0060401
  // isVersionOf: http://identifiers.org/go/GO:0006816
  // isVersionOf: http://identifiers.org/go/GO:0070588
  // isVersionOf: http://identifiers.org/go/GO:0015085
  def comp IpCa as
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    var GpCa: milliS_per_microF {init: 0.0005};
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    var KmCap: millimolar {init: 0.0005};
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0070588
    // isVersionOf: http://identifiers.org/go/GO:0015085
    var IpCa: microA_per_microF {pub: out};
    var cai: millimolar {pub: in};
    IpCa = GpCa*cai/(KmCap+cai);
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62390
  // isVersionOf: http://identifiers.org/fma/FMA:67225
  def comp diff as
    var cai: millimolar {pub: in};
    var cass: millimolar {pub: in};
    var nai: millimolar {pub: in};
    var nass: millimolar {pub: in};
    var ki: millimolar {pub: in};
    var kss: millimolar {pub: in};
    var JdiffNa: millimolar_per_millisecond {pub: out};
    var Jdiff: millimolar_per_millisecond {pub: out};
    var JdiffK: millimolar_per_millisecond {pub: out};
    JdiffNa = (nass-nai)/2{dimensionless};
    JdiffK = (kss-ki)/2{dimensionless};
    Jdiff = (cass-cai)/0.2{dimensionless};
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  def comp ryr as
    var bt: millisecond {init: 4.75};
    var a_rel: millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005219
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var Jrel_inf: dimensionless;
    var tau_rel: millisecond;
    var celltype: dimensionless {pub: in};
    var ICaL: microA_per_microF {pub: in};
    var cajsr: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005219
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var Jrel_infp: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005219
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var Jrel_temp: dimensionless;
    var tau_relp: millisecond;
    var Jrelnp: dimensionless {init: 0};
    var Jrelp: dimensionless {init: 0};
    var time: millisecond {pub: in};
    var btp: millisecond;
    var a_relp: millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var KmCaMK: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0004683
    var CaMKa: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005219
    var Jrel_inf_temp: dimensionless;
    var fJrelp: dimensionless;
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var Jrel: millimolar_per_millisecond {pub: out};
    var tau_rel_temp: millisecond;
    var tau_relp_temp: millisecond;
    a_rel = 0.5{dimensionless}*bt;
    Jrel_inf_temp = a_rel*(-ICaL)/(1{microA_per_microF}+1{microA_per_microF}*pow(1.5{millimolar}/cajsr, 8{dimensionless}));
    Jrel_inf = sel
      case celltype == 2{dimensionless}:
        Jrel_inf_temp*1.7{dimensionless};
      otherwise:
        Jrel_inf_temp;
    endsel;
    tau_rel_temp = bt/(1{dimensionless}+0.0123{millimolar}/cajsr);
    tau_rel = sel
      case tau_rel_temp < 0.001{millisecond}:
        0.001{millisecond};
      otherwise:
        tau_rel_temp;
    endsel;
    ode(Jrelnp, time) = (Jrel_inf-Jrelnp)/tau_rel;
    btp = 1.25{dimensionless}*bt;
    a_relp = 0.5{dimensionless}*btp;
    Jrel_temp = a_relp*(-ICaL)/(1{dimensionless}+pow(1.5{millimolar}/cajsr, 8{dimensionless}));
    Jrel_infp = sel
      case celltype == 2{dimensionless}:
        Jrel_temp*1.7{dimensionless};
      otherwise:
        Jrel_temp;
    endsel;
    tau_relp_temp = btp/(1{dimensionless}+0.0123{millimolar}/cajsr);
    tau_relp = sel
      case tau_relp_temp < 0.001{millisecond}:
        0.001{millisecond};
      otherwise:
        tau_relp_temp;
    endsel;
    ode(Jrelp, time) = (Jrel_infp-Jrelp)/tau_relp;
    fJrelp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Jrel = (1{dimensionless}-fJrelp)*Jrelnp+fJrelp*Jrelp;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0070296
  // isVersionOf: http://identifiers.org/go/GO:0010880
  // isVersionOf: http://identifiers.org/go/GO:0014808
  def comp SERCA as
    var upScale: dimensionless;
    var Jupnp: millimolar_per_millisecond;
    var Jupp: millimolar_per_millisecond;
    var KmCaMK: millimolar {pub: in};
    var CaMKa: millimolar {pub: in};
    var celltype: dimensionless {pub: in};
    var cai: millimolar {pub: in};
    var cansr: millimolar {pub: in};
    var fJupp: dimensionless;
    var Jleak: millimolar_per_millisecond;
    var Jup: millimolar_per_millisecond {pub: out};
    upScale = sel
      case celltype == 1{dimensionless}:
        1.3{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    Jupnp = upScale*0.004375{dimensionless}*cai/(cai+0.00092{millimolar});
    Jupp = upScale*2.75{dimensionless}*0.004375{dimensionless}*cai/(cai+0.00092{millimolar}-0.00017{millimolar});
    fJupp = 1{dimensionless}/(1{dimensionless}+KmCaMK/CaMKa);
    Jleak = 0.0039375{millimolar_per_millisecond}*cansr/15{millimolar};
    Jup = (1{dimensionless}-fJupp)*Jupnp+fJupp*Jupp-Jleak;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62387
  // isVersionOf: http://identifiers.org/fma/FMA:62390
  // isVersionOf: http://identifiers.org/fma/FMA:62391
  // isVersionOf: http://identifiers.org/fma/FMA:62388
  def comp trans_flux as
    var cansr: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var cajsr: millimolar {pub: in};
    var Jtr: millimolar_per_millisecond {pub: out};
    Jtr = (cansr-cajsr)/100{millisecond};
  enddef;
  def map between intracellular_ions and INaL for
    vars INaL and INaL;
  enddef;
  def map between intracellular_ions and membrane for
    vars Istim and Istim;
  enddef;
  def map between intracellular_ions and trans_flux for
    vars cajsr and cajsr;
    vars cansr and cansr;
    vars Jtr and Jtr;
  enddef;
  def map between intracellular_ions and SERCA for
    vars cai and cai;
    vars cansr and cansr;
    vars Jup and Jup;
  enddef;
  def map between SERCA and environment for
    vars celltype and celltype;
  enddef;
  def map between SERCA and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between intracellular_ions and ryr for
    vars cajsr and cajsr;
    vars Jrel and Jrel;
  enddef;
  def map between ICaL and ryr for
    vars ICaL and ICaL;
  enddef;
  def map between ryr and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between ryr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between intracellular_ions and diff for
    vars cai and cai;
    vars cass and cass;
    vars nai and nai;
    vars nass and nass;
    vars ki and ki;
    vars kss and kss;
    vars JdiffK and JdiffK;
    vars Jdiff and Jdiff;
    vars JdiffNa and JdiffNa;
  enddef;
  def map between IpCa and membrane for
    vars IpCa and IpCa;
  enddef;
  def map between intracellular_ions and IpCa for
    vars cai and cai;
    vars IpCa and IpCa;
  enddef;
  def map between extracellular and ICab for
    vars cao and cao;
  enddef;
  def map between intracellular_ions and ICab for
    vars cai and cai;
    vars ICab and ICab;
  enddef;
  def map between ICab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICab and ICab;
  enddef;
  def map between extracellular and INab for
    vars nao and nao;
  enddef;
  def map between intracellular_ions and INab for
    vars nai and nai;
    vars INab and INab;
  enddef;
  def map between INab and membrane for
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars INab and INab;
  enddef;
  def map between IKb and membrane for
    vars v and v;
    vars IKb and IKb;
  enddef;
  def map between IKb and environment for
    vars celltype and celltype;
  enddef;
  def map between IKb and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between intracellular_ions and IKb for
    vars IKb and IKb;
  enddef;
  def map between intracellular_ions and INaK for
    vars ki and ki;
    vars nai and nai;
    vars INaK and INaK;
  enddef;
  def map between INaK and membrane for
    vars v and v;
    vars INaK and INaK;
  enddef;
  def map between INaK and environment for
    vars celltype and celltype;
  enddef;
  def map between INaK and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zk and zk;
  enddef;
  def map between extracellular and INaK for
    vars nao and nao;
    vars ko and ko;
  enddef;
  def map between intracellular_ions and INaCa_i for
    vars cai and cai;
    vars nai and nai;
    vars nass and nass;
    vars cass and cass;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and membrane for
    vars v and v;
    vars INaCa_i and INaCa_i;
    vars INaCa_ss and INaCa_ss;
  enddef;
  def map between INaCa_i and environment for
    vars celltype and celltype;
  enddef;
  def map between INaCa_i and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zna and zna;
    vars zca and zca;
  enddef;
  def map between extracellular and INaCa_i for
    vars nao and nao;
    vars cao and cao;
  enddef;
  def map between intracellular_ions and IKs for
    vars cai and cai;
    vars IKs and IKs;
  enddef;
  def map between IK1 and membrane for
    vars v and v;
    vars IK1 and IK1;
  enddef;
  def map between IK1 and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between IKs and membrane for
    vars v and v;
    vars IKs and IKs;
  enddef;
  def map between IKs and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between IK1 and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between IKs and reversal_potentials for
    vars EKs and EKs;
  enddef;
  def map between Ito and membrane for
    vars v and v;
    vars Ito and Ito;
  enddef;
  def map between INaL and membrane for
    vars v and v;
    vars INaL and INaL;
  enddef;
  def map between IKr and membrane for
    vars v and v;
    vars IKr and IKr;
  enddef;
  def map between IKr and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between INaL and reversal_potentials for
    vars ENa and ENa;
  enddef;
  def map between Ito and reversal_potentials for
    vars EK and EK;
  enddef;
  def map between INaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between INaL and INa for
    vars tm and tm;
  enddef;
  def map between INaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and environment for
    vars celltype and celltype;
    vars time and time;
  enddef;
  def map between ICaL and CaMK for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between CaMK and environment for
    vars time and time;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between ICaL and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ICaL for
    vars v and v;
    vars vffrt and vffrt;
    vars vfrt and vfrt;
    vars ICaL and ICaL;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
  enddef;
  def map between membrane and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between intracellular_ions and ICaL for
    vars cass and cass;
    vars nass and nass;
    vars kss and kss;
    vars ICaNa and ICaNa;
    vars ICaK and ICaK;
    vars ICaL and ICaL;
  enddef;
  def map between extracellular and IK1 for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between extracellular and ICaL for
    vars nao and nao;
    vars ko and ko;
    vars cao and cao;
  enddef;
  def map between extracellular and IKr for
    vars ko and ko;
  enddef;
  def map between intracellular_ions and IKr for
    vars IKr and IKr;
  enddef;
  def map between reversal_potentials and physical_constants for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and INa for
    vars ENa and ENa;
  enddef;
  def map between intracellular_ions and INa for
    vars INa and INa;
  enddef;
  def map between intracellular_ions and Ito for
    vars Ito and Ito;
  enddef;
  def map between membrane and INa for
    vars v and v;
    vars INa and INa;
  enddef;
  def map between CaMK and INa for
    vars KmCaMK and KmCaMK;
    vars CaMKa and CaMKa;
  enddef;
  def map between Ito and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between intracellular_ions and CaMK for
    vars cass and cass;
  enddef;
  def map between intracellular_ions and cell_geometry for
    vars Acap and Acap;
    vars vmyo and vmyo;
    vars vss and vss;
    vars vnsr and vnsr;
    vars vjsr and vjsr;
  enddef;
  def map between intracellular_ions and environment for
    vars time and time;
    vars celltype and celltype;
  enddef;
  def map between intracellular_ions and reversal_potentials for
    vars nai and nai;
    vars ki and ki;
  enddef;
  def map between extracellular and reversal_potentials for
    vars nao and nao;
    vars ko and ko;
  enddef;
enddef;
