<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="bertram_2002" name="bertram_2002">

	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Role for G protein G-beta-gamma isoform specificity in synaptic signal processing: a computational study</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title> 
				<para>This CellML model represents the pre-synaptic cell.  The model runs in both OpenCell and COR, but the membrane only depolarises to -5 mV as opposed to ~40 mV. The units have been checked and there are no inconsistencies (just equivalences).
				</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>ABSTRACT:  Computational modeling is used to investigate the functional impact of G protein-mediated presynaptic autoinhibition on synaptic filtering properties. It is demonstrated that this form of autoinhibition, which is relieved by depolarization, acts as a high-pass filter. This contrasts with vesicle depletion, which acts as a low-pass filter. Model parameters are adjusted to reproduce kinetic slowing data from different Gbetagamma dimeric isoforms, which produce different degrees of slowing. With these sets of parameter values, we demonstrate that the range of frequencies filtered out by the autoinhibition varies greatly depending on the Gbetagamma isoform activated by the autoreceptors. It is shown that G protein autoinhibition can enhance the spatial contrast between a spatially distributed high-frequency signal and surrounding low-frequency noise, providing an alternate mechanism to lateral inhibition. It is also shown that autoinhibition can increase the fidelity of coincidence detection by increasing the signal-to-noise ratio in the postsynaptic cell. The filter cut, the input frequency below which signals are filtered, depends on several biophysical parameters in addition to those related to Gbetagamma binding and unbinding. By varying one such parameter, the rate at which transmitter unbinds from autoreceptors, we show that the filter cut can be adjusted up or down for several of the Gbetagamma isoforms. This allows for great synapse-to-synapse variability in the distinction between signal and noise.
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
Role for G Protein G-Beta-Gamma Isoform Specificity in Synaptic Signal Processing: A Computational Study, Richard Bertram, Michelle I. Arnot, and Gerald W. Zamponi, 2002,<emphasis>Journal of Neurophysiology</emphasis>
          , 87, 2612-2623. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/11976397">PubMed ID: 11976397</ulink>
				</para>
				
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>reaction diagram</title>
							</objectinfo>
							<imagedata fileref="bertram_2002.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the presynaptic model.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	
	
   <units name="s">
      <unit units="second"/>
   </units>
   <units name="ms">
      <unit prefix="milli" units="second"/>
   </units>
   <units name="uM">
      <unit prefix="micro" units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="uA">
      <unit prefix="micro" units="ampere"/>
   </units>
   <units name="pS">
      <unit prefix="pico" units="siemens"/>
   </units>
   <units name="mV">
      <unit prefix="milli" units="volt"/>
   </units>
   <units name="cm2">
      <unit exponent="2" prefix="centi" units="metre"/>
   </units>
   <units name="per_cm2">
      <unit exponent="-1" units="cm2"/>
   </units>
   <units name="per_ms">
      <unit exponent="-1" units="ms"/>
   </units>
   <units name="uM_per_ms">
      <unit units="uM"/>
      <unit exponent="-1" units="ms"/>
   </units>
   <units name="per_uM_per_ms">
      <unit exponent="-1" units="uM"/>
      <unit exponent="-1" units="ms"/>
   </units>
   <units name="per_mV_per_ms">
      <unit exponent="-1" units="mV"/>
      <unit exponent="-1" units="ms"/>
   </units>
   <units name="uM2_per_ms">
      <unit exponent="2" units="uM"/>
      <unit exponent="-1" units="ms"/>
   </units>
   <units name="mV_per_uM">
      <unit units="mV"/>
      <unit exponent="-1" units="uM"/>
   </units>
   <units name="uF_per_cm2">
      <unit prefix="micro" units="farad"/>
      <unit units="per_cm2"/>
   </units>
   <units name="uA_per_cm2">
      <unit units="uA"/>
      <unit units="per_cm2"/>
   </units>
   <units name="pS_per_cm2">
      <unit units="pS"/>
      <unit units="per_cm2"/>
   </units>
   <units name="mS_per_cm2">
      <unit prefix="milli" units="siemens"/>
      <unit units="per_cm2"/>
   </units>
   <units name="nm">
      <unit prefix="nano" units="metre"/>
   </units>
   <units name="uM2_nm">
      <unit exponent="2" units="uM"/>
      <unit units="nm"/>
   </units>
   <units name="uM_per_cm2">
      <unit units="uM"/>
      <unit units="per_cm2"/>
   </units>
   <units name="millijoule_per_mole_kelvin">
      <unit prefix="milli" units="joule"/>
      <unit exponent="-1" units="mole"/>
      <unit exponent="-1" units="kelvin"/>
   </units>
   <units name="coulomb_per_mole">
      <unit units="coulomb"/>
      <unit exponent="-1" units="mole"/>
   </units>
   <units name="uM_per_coulomb">
      <unit units="uM"/>
      <unit exponent="-1" units="coulomb"/>
   </units>
   <units name="um2_per_second">
      <unit exponent="2" prefix="micro" units="meter"/>
      <unit exponent="-1" units="second"/>
   </units>
   <units name="per_um3">
      <unit exponent="-3" prefix="micro" units="meter"/>
   </units>
   
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="ms"/>
   </component>
   
   <component name="parameters">
      <variable initial_value="8314.41" name="R_gas_const" public_interface="out" units="millijoule_per_mole_kelvin"/>
      <variable initial_value="310" name="Temp" public_interface="out" units="kelvin"/>
      <variable initial_value="96485" name="F" public_interface="out" units="coulomb_per_mole"/>
   </component>
   
   <component name="membrane">
      <variable cmeta:id="membrane_V" initial_value="-65" name="V" public_interface="out" units="mV"/>
	  
      <variable initial_value="1" name="Cm" units="uF_per_cm2"/>
	  
      <variable name="i_app" public_interface="in" units="uA_per_cm2"/>
      <variable name="i_Na" public_interface="in" units="uA_per_cm2"/>
      <variable name="i_K" public_interface="in" units="uA_per_cm2"/>
      <variable name="i_leak" public_interface="in" units="uA_per_cm2"/>
      <variable name="time" public_interface="in" units="ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>i_Na</ci>
                        <ci>i_K</ci>
                        <ci>i_leak</ci>
                     </apply>
                     <ci>i_app</ci>
                  </apply>
               </apply>
               <ci>Cm</ci>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="stimulus_protocol">
      <variable name="i_app" public_interface="out" units="uA_per_cm2"/>
      <variable initial_value="10" name="IstimStart" units="ms"/>
      <variable initial_value="50000" name="IstimEnd" units="ms"/>
      <variable initial_value="40.0" name="IstimAmplitude" units="uA_per_cm2"/>
      <variable initial_value="100" name="IstimPeriod" units="ms"/>
      <variable initial_value="1" name="IstimPulseDuration" units="ms"/>
      <variable name="time" public_interface="in" units="ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_app</ci>
            <piecewise>
               <piece>
                  <ci>IstimAmplitude</ci>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <ci>time</ci>
                        <ci>IstimStart</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <ci>time</ci>
                        <ci>IstimEnd</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>time</ci>
                              <ci>IstimStart</ci>
                           </apply>
                           <apply>
                              <times/>
                              <apply>
                                 <floor/>
                                 <apply>
                                    <divide/>
                                    <apply>
                                       <minus/>
                                       <ci>time</ci>
                                       <ci>IstimStart</ci>
                                    </apply>
                                    <ci>IstimPeriod</ci>
                                 </apply>
                              </apply>
                              <ci>IstimPeriod</ci>
                           </apply>
                        </apply>
                        <ci>IstimPulseDuration</ci>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="uA_per_cm2">0</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   
   <component name="sodium_current">
      <variable cmeta:id="sodium_current_i_Na" name="i_Na" public_interface="out" units="uA_per_cm2"/>
      <variable name="x_infinity" units="dimensionless"/>
      <variable name="alpha_x" units="dimensionless"/>
      <variable name="beta_x" units="dimensionless"/>
	  
	  <variable name="time" public_interface="in" units="ms"/>
      <variable name="V" public_interface="in" units="mV"/>
      <variable name="n" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="pS_per_cm2">120</cn>
               <apply>
                  <power/>
                  <ci>x_infinity</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
               </apply>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <ci>n</ci>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">120</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>x_infinity</ci>
            <apply>
               <divide/>
               <ci>alpha_x</ci>
               <apply>
                  <plus/>
                  <ci>alpha_x</ci>
                  <ci>beta_x</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>alpha_x</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.2</cn>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">40</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">1</cn>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">1</cn>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">40</cn>
                              </apply>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">10</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_x</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">8</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">1</cn>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <apply>
                              <divide/>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">65</cn>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">18</cn>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="potassium_current">
      <variable cmeta:id="potassium_current_i_K" name="i_K" public_interface="out" units="uA_per_cm2"/>
      <variable name="time" public_interface="in" units="ms"/>
      <variable name="V" public_interface="in" units="mV"/>
      <variable name="n" public_interface="in" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="pS">36</cn>
                  <apply>
                     <power/>
                     <ci>n</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">77</cn>
                  </apply>
               </apply>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="cm2">1</cn>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="potassium_current_n_gate">
      <variable initial_value="0" name="n" public_interface="out" units="dimensionless"/>
      <variable name="alpha_n" units="per_ms"/>
      <variable name="beta_n" units="per_ms"/>
      <variable name="V" public_interface="in" units="mV"/>
      <variable name="time" public_interface="in" units="ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_n</ci>
                  <apply>
                     <minus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>n</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_n</ci>
                  <ci>n</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>alpha_n</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_mV_per_ms">0.02</cn>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">55</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">55</cn>
                           </apply>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">10</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_n</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_ms">0.25</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">65</cn>
                        </apply>
                     </apply>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">80</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="leak_current">
      <variable cmeta:id="leak_current_i_leak" name="i_leak" public_interface="out" units="uA_per_cm2"/>
      <variable name="time" public_interface="in" units="ms"/>
      <variable name="V" public_interface="in" units="mV"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_leak</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="pS_per_cm2">0.3</cn>
               <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">54</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="transmitter_release">
      <variable name="T" public_interface="out" units="uM"/>
      
	  <variable initial_value="4000.0" name="T_bar" units="uM"/>
	  <variable initial_value="0" name="R" units="dimensionless"/>
      <variable initial_value="0.15" name="kr_plus" units="per_uM_per_ms"/>
      <variable initial_value="2.5" name="kr_minus" units="per_ms"/>
      
	  <variable name="Ca" public_interface="in" units="uM"/>
      <variable name="time" public_interface="in" units="ms"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>R</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>kr_plus</ci>
                  <ci>Ca</ci>
                  <apply>
                     <minus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>R</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>kr_minus</ci>
                  <ci>R</ci>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>T</ci>
            <apply>
               <times/>
               <ci>T_bar</ci>
               <ci>R</ci>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="calcium_concentration">
      <variable name="Ca" public_interface="out" units="uM"/>
      
	  <variable initial_value="2000.0" name="Ca_ex" units="uM"/>
      <variable name="Ca_open" units="uM"/>
      <variable initial_value="220" name="Dc" units="um2_per_second"/>
      <variable initial_value="10" name="r" units="nm"/>
      <variable name="sigma" units="uM_per_ms"/>
      <variable name="i_V" units="uA"/>
      <variable initial_value="1.2" name="g_Ca" units="pS"/>
      <variable initial_value="0.006" name="P" units="mV_per_uM"/>
      
	  <variable name="R_gas_const" public_interface="in" units="millijoule_per_mole_kelvin"/>
      <variable name="F" public_interface="in" units="coulomb_per_mole"/>
      <variable name="Temp" public_interface="in" units="kelvin"/>
      <variable name="V" public_interface="in" units="mV"/>
      <variable name="O" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="ms"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Ca_open</ci>
            <apply>
               <divide/>
               <ci>sigma</ci>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_um3">2</cn>
                  <ci>Dc</ci>
                  <ci>r</ci>
                  <pi/>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>sigma</ci>
            <apply>
               <times/>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="uM_per_coulomb">5.182</cn>
               </apply>
               <ci>i_V</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_V</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>g_Ca</ci>
                        <ci>P</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        <ci>F</ci>
                        <ci>V</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>R_gas_const</ci>
                        <ci>Temp</ci>
                     </apply>
                  </apply>
                  <ci>Ca_ex</ci>
               </apply>
               <apply>
                  <minus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                           <ci>F</ci>
                           <ci>V</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>R_gas_const</ci>
                           <ci>Temp</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>Ca</ci>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <ci>O</ci>
                  <ci>Ca_open</ci>
               </apply>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="uM">0.1</cn>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="rate_constants">
      <variable cmeta:id="rate_constants_alpha" name="alpha" public_interface="out" units="per_ms"/>
      <variable name="alpha_" public_interface="out" units="per_ms"/>
      <variable cmeta:id="rate_constants_beta" name="beta" public_interface="out" units="per_ms"/>
      <variable name="beta_" public_interface="out" units="per_ms"/>
      <variable name="kG_plus" public_interface="out" units="per_ms"/>
	  <variable initial_value="0.00025" name="kG_minus" public_interface="out" units="per_ms"/>
      <variable initial_value="0.016" name="kG2_minus" public_interface="out" units="per_ms"/>
      <variable initial_value="1.024" name="kG3_minus" public_interface="out" units="per_ms"/>
	  
      <variable initial_value="0" name="a" units="dimensionless"/>
      <variable initial_value="200.0" name="ka_plus" units="per_uM_per_ms"/>
      <variable initial_value="0.0015" name="ka_minus" units="per_ms"/>
      
	  <variable name="V" public_interface="in" units="mV"/>
      <variable name="time" public_interface="in" units="ms"/>
      <variable name="T" public_interface="in" units="uM"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_ms">0.45</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <ci>V</ci>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">22</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>alpha_</ci>
            <apply>
               <divide/>
               <ci>alpha</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">8</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta</ci>
            <apply>
               <times/>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_ms">0.015</cn>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <ci>V</ci>
                     </apply>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mV">14</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_</ci>
            <apply>
               <times/>
               <ci>beta</ci>
               <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">8</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>a</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>ka_plus</ci>
                  <ci>T</ci>
                  <apply>
                     <minus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                     <ci>a</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>ka_minus</ci>
                  <ci>a</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>kG_plus</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_ms">3</cn>
                  <ci>a</ci>
               </apply>
               <apply>
                  <plus/>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">680</cn>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">320</cn>
                     <ci>a</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="C1">
      <variable initial_value="1" name="C1" public_interface="out" units="dimensionless"/>
	  
	  <variable name="alpha" public_interface="in" units="per_ms"/>
      <variable name="beta" public_interface="in" units="per_ms"/>
      <variable name="C2" public_interface="in" units="dimensionless"/>
      <variable name="C_G1" public_interface="in" units="dimensionless"/>
      <variable name="kG_minus" public_interface="in" units="per_ms"/>
      <variable name="kG_plus" public_interface="in" units="per_ms"/>
      <variable name="time" public_interface="in" units="ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>beta</ci>
                     <ci>C2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kG_minus</ci>
                     <ci>C_G1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>C1</ci>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                        <ci>alpha</ci>
                     </apply>
                     <ci>kG_plus</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="C2">
      <variable initial_value="0" name="C2" public_interface="out" units="dimensionless"/>
      
	  <variable name="alpha" public_interface="in" units="per_ms"/>
      <variable name="beta" public_interface="in" units="per_ms"/>
      <variable name="C1" public_interface="in" units="dimensionless"/>
      <variable name="C3" public_interface="in" units="dimensionless"/>
      <variable name="C_G2" public_interface="in" units="dimensionless"/>
      <variable name="kG_plus" public_interface="in" units="per_ms"/>
      <variable name="kG2_minus" public_interface="in" units="per_ms"/>
      <variable name="time" public_interface="in" units="ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                     <ci>alpha</ci>
                     <ci>C1</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                     <ci>beta</ci>
                     <ci>C3</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kG2_minus</ci>
                     <ci>C_G2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>C2</ci>
                  <apply>
                     <plus/>
                     <ci>beta</ci>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                        <ci>alpha</ci>
                     </apply>
                     <ci>kG_plus</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="C3">
      <variable initial_value="0" name="C3" public_interface="out" units="dimensionless"/>
      
	  <variable name="alpha" public_interface="in" units="per_ms"/>
      <variable name="beta" public_interface="in" units="per_ms"/>
      <variable name="C2" public_interface="in" units="dimensionless"/>
      <variable name="C4" public_interface="in" units="dimensionless"/>
      <variable name="C_G3" public_interface="in" units="dimensionless"/>
      <variable name="kG_plus" public_interface="in" units="per_ms"/>
      <variable name="kG3_minus" public_interface="in" units="per_ms"/>
      <variable name="time" public_interface="in" units="ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     <ci>alpha</ci>
                     <ci>C2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     <ci>beta</ci>
                     <ci>C4</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kG3_minus</ci>
                     <ci>C_G3</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>C3</ci>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        <ci>beta</ci>
                     </apply>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        <ci>alpha</ci>
                     </apply>
                     <ci>kG_plus</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="C4">
      <variable initial_value="0" name="C4" public_interface="out" units="dimensionless"/>
      
	  <variable name="alpha" public_interface="in" units="per_ms"/>
      <variable name="beta" public_interface="in" units="per_ms"/>
      <variable name="C3" public_interface="in" units="dimensionless"/>
      <variable name="O" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C4</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                     <ci>alpha</ci>
                     <ci>C3</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                     <ci>beta</ci>
                     <ci>O</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>C4</ci>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                        <ci>beta</ci>
                     </apply>
                     <ci>alpha</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="O">
      <variable name="O" public_interface="out" units="dimensionless"/>
      
	  <variable name="C1" public_interface="in" units="dimensionless"/>
      <variable name="C2" public_interface="in" units="dimensionless"/>
      <variable name="C3" public_interface="in" units="dimensionless"/>
      <variable name="C4" public_interface="in" units="dimensionless"/>
      <variable name="C_G1" public_interface="in" units="dimensionless"/>
      <variable name="C_G2" public_interface="in" units="dimensionless"/>
      <variable name="C_G3" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="ms"/>
      <variable name="C_G" units="dimensionless"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>O</ci>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <minus/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <apply>
                                 <minus/>
                                 <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                 <ci>C1</ci>
                              </apply>
                              <ci>C2</ci>
                           </apply>
                           <ci>C3</ci>
                        </apply>
                        <ci>C4</ci>
                     </apply>
                     <ci>C_G1</ci>
                  </apply>
                  <ci>C_G2</ci>
               </apply>
               <ci>C_G3</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>C_G</ci>
            <apply>
               <plus/>
               <ci>C_G1</ci>
               <ci>C_G2</ci>
               <ci>C_G3</ci>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="C_G1">
      <variable initial_value="0" name="C_G1" public_interface="out" units="dimensionless"/>
      
	  <variable name="alpha_" public_interface="in" units="per_ms"/>
      <variable name="beta_" public_interface="in" units="per_ms"/>
      <variable name="C1" public_interface="in" units="dimensionless"/>
      <variable name="C_G2" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="ms"/>
      <variable name="kG_plus" public_interface="in" units="per_ms"/>
      <variable name="kG_minus" public_interface="in" units="per_ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_G1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>beta_</ci>
                     <ci>C_G2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kG_plus</ci>
                     <ci>C1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>C_G1</ci>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                        <ci>alpha_</ci>
                     </apply>
                     <ci>kG_minus</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="C_G2">
      <variable initial_value="0" name="C_G2" public_interface="out" units="dimensionless"/>
      
	  <variable name="alpha_" public_interface="in" units="per_ms"/>
      <variable name="beta_" public_interface="in" units="per_ms"/>
      <variable name="C2" public_interface="in" units="dimensionless"/>
      <variable name="C_G1" public_interface="in" units="dimensionless"/>
      <variable name="C_G3" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="ms"/>
      <variable name="kG_plus" public_interface="in" units="per_ms"/>
      <variable name="kG2_minus" public_interface="in" units="per_ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_G2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                     <ci>alpha_</ci>
                     <ci>C_G1</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                     <ci>beta_</ci>
                     <ci>C_G3</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kG_plus</ci>
                     <ci>C2</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>C_G2</ci>
                  <apply>
                     <plus/>
                     <ci>beta_</ci>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                        <ci>alpha_</ci>
                     </apply>
                     <ci>kG2_minus</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component name="C_G3">
      <variable initial_value="0" name="C_G3" public_interface="out" units="dimensionless"/>
      
	  <variable name="alpha_" public_interface="in" units="per_ms"/>
      <variable name="beta_" public_interface="in" units="per_ms"/>
      <variable name="C3" public_interface="in" units="dimensionless"/>
      <variable name="C_G2" public_interface="in" units="dimensionless"/>
      <variable name="time" public_interface="in" units="ms"/>
      <variable name="kG_plus" public_interface="in" units="per_ms"/>
      <variable name="kG3_minus" public_interface="in" units="per_ms"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C_G3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     <ci>alpha_</ci>
                     <ci>C_G2</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kG_plus</ci>
                     <ci>C3</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>C_G3</ci>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        <ci>beta_</ci>
                     </apply>
                     <ci>kG3_minus</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
  
   <connection>
      <map_components component_1="environment" component_2="membrane"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="sodium_current"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="potassium_current"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="potassium_current_n_gate"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="leak_current"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="transmitter_release"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="calcium_concentration"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="rate_constants"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="C1"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="C2"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="C3"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="C4"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="O"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="C_G1"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="C_G2"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="C_G3"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="sodium_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_Na" variable_2="i_Na"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="potassium_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_K" variable_2="i_K"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="potassium_current_n_gate"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="potassium_current" component_2="potassium_current_n_gate"/>
      <map_variables variable_1="n" variable_2="n"/>
   </connection>
   <connection>
      <map_components component_1="sodium_current" component_2="potassium_current_n_gate"/>
      <map_variables variable_1="n" variable_2="n"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="leak_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_leak" variable_2="i_leak"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="calcium_concentration"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="parameters" component_2="calcium_concentration"/>
      <map_variables variable_1="R_gas_const" variable_2="R_gas_const"/>
      <map_variables variable_1="F" variable_2="F"/>
      <map_variables variable_1="Temp" variable_2="Temp"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="rate_constants"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="O" component_2="calcium_concentration"/>
      <map_variables variable_1="O" variable_2="O"/>
   </connection>
   <connection>
      <map_components component_1="transmitter_release" component_2="calcium_concentration"/>
      <map_variables variable_1="Ca" variable_2="Ca"/>
   </connection>
   <connection>
      <map_components component_1="transmitter_release" component_2="rate_constants"/>
      <map_variables variable_1="T" variable_2="T"/>
   </connection>
   <connection>
      <map_components component_1="rate_constants" component_2="C1"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="kG_plus" variable_2="kG_plus"/>
      <map_variables variable_1="kG_minus" variable_2="kG_minus"/>
   </connection>
   <connection>
      <map_components component_1="C2" component_2="C1"/>
      <map_variables variable_1="C2" variable_2="C2"/>
      <map_variables variable_1="C1" variable_2="C1"/>
   </connection>
   <connection>
      <map_components component_1="C_G1" component_2="C1"/>
      <map_variables variable_1="C_G1" variable_2="C_G1"/>
      <map_variables variable_1="C1" variable_2="C1"/>
   </connection>
   <connection>
      <map_components component_1="rate_constants" component_2="C2"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="kG_plus" variable_2="kG_plus"/>
      <map_variables variable_1="kG2_minus" variable_2="kG2_minus"/>
   </connection>
   <connection>
      <map_components component_1="C3" component_2="C2"/>
      <map_variables variable_1="C3" variable_2="C3"/>
      <map_variables variable_1="C2" variable_2="C2"/>
   </connection>
   <connection>
      <map_components component_1="C_G2" component_2="C2"/>
      <map_variables variable_1="C_G2" variable_2="C_G2"/>
      <map_variables variable_1="C2" variable_2="C2"/>
   </connection>
   <connection>
      <map_components component_1="rate_constants" component_2="C3"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="beta" variable_2="beta"/>
      <map_variables variable_1="kG_plus" variable_2="kG_plus"/>
      <map_variables variable_1="kG3_minus" variable_2="kG3_minus"/>
   </connection>
   <connection>
      <map_components component_1="C4" component_2="C3"/>
      <map_variables variable_1="C4" variable_2="C4"/>
      <map_variables variable_1="C3" variable_2="C3"/>
   </connection>
   <connection>
      <map_components component_1="C_G3" component_2="C3"/>
      <map_variables variable_1="C_G3" variable_2="C_G3"/>
      <map_variables variable_1="C3" variable_2="C3"/>
   </connection>
   <connection>
      <map_components component_1="rate_constants" component_2="C4"/>
      <map_variables variable_1="alpha" variable_2="alpha"/>
      <map_variables variable_1="beta" variable_2="beta"/>
   </connection>
   <connection>
      <map_components component_1="O" component_2="C4"/>
      <map_variables variable_1="O" variable_2="O"/>
      <map_variables variable_1="C4" variable_2="C4"/>
   </connection>
   <connection>
      <map_components component_1="C1" component_2="O"/>
      <map_variables variable_1="C1" variable_2="C1"/>
   </connection>
   <connection>
      <map_components component_1="C2" component_2="O"/>
      <map_variables variable_1="C2" variable_2="C2"/>
   </connection>
   <connection>
      <map_components component_1="C3" component_2="O"/>
      <map_variables variable_1="C3" variable_2="C3"/>
   </connection>
   <connection>
      <map_components component_1="C_G1" component_2="O"/>
      <map_variables variable_1="C_G1" variable_2="C_G1"/>
   </connection>
   <connection>
      <map_components component_1="C_G2" component_2="O"/>
      <map_variables variable_1="C_G2" variable_2="C_G2"/>
   </connection>
   <connection>
      <map_components component_1="C_G3" component_2="O"/>
      <map_variables variable_1="C_G3" variable_2="C_G3"/>
   </connection>
   <connection>
      <map_components component_1="rate_constants" component_2="C_G1"/>
      <map_variables variable_1="alpha_" variable_2="alpha_"/>
      <map_variables variable_1="beta_" variable_2="beta_"/>
      <map_variables variable_1="kG_plus" variable_2="kG_plus"/>
      <map_variables variable_1="kG_minus" variable_2="kG_minus"/>
   </connection>
   <connection>
      <map_components component_1="C_G2" component_2="C_G1"/>
      <map_variables variable_1="C_G2" variable_2="C_G2"/>
      <map_variables variable_1="C_G1" variable_2="C_G1"/>
   </connection>
   <connection>
      <map_components component_1="rate_constants" component_2="C_G2"/>
      <map_variables variable_1="alpha_" variable_2="alpha_"/>
      <map_variables variable_1="beta_" variable_2="beta_"/>
      <map_variables variable_1="kG_plus" variable_2="kG_plus"/>
      <map_variables variable_1="kG2_minus" variable_2="kG2_minus"/>
   </connection>
   <connection>
      <map_components component_1="C_G3" component_2="C_G2"/>
      <map_variables variable_1="C_G3" variable_2="C_G3"/>
      <map_variables variable_1="C_G2" variable_2="C_G2"/>
   </connection>
   <connection>
      <map_components component_1="rate_constants" component_2="C_G3"/>
      <map_variables variable_1="alpha_" variable_2="alpha_"/>
      <map_variables variable_1="beta_" variable_2="beta_"/>
      <map_variables variable_1="kG_plus" variable_2="kG_plus"/>
      <map_variables variable_1="kG3_minus" variable_2="kG3_minus"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="stimulus_protocol"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="stimulus_protocol"/>
      <map_variables variable_1="i_app" variable_2="i_app"/>
   </connection>
   
   <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
    
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    
    <rdf:Description rdf:about="#bertram_2002">
     
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      <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
        <bqs:Pubmed_id>11976397</bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Bertram</vCard:Family>
                    <vCard:Given>R</vCard:Given>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Arnot</vCard:Family>
                    <vCard:Given>M</vCard:Given>
					<vCard:Other>I</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Zamponi</vCard:Family>
                    <vCard:Given>G</vCard:Given>
					<vCard:Other>W</vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
            Role for G protein G-beta-gamma isoform specificity in synaptic signal processing: a computational study
          </dc:title>
          <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
            <dcterms:W3CDTF>2002-05</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Journal of Neurophysiology</dc:title>
          </bqs:Journal>
		  <bqs:volume>87</bqs:volume>
          <bqs:first_page>2612</bqs:first_page>
          <bqs:last_page>2623</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
</model>