//   FILE :  youm_model_2006.xml
//
// CREATED :  6th December 2007
//
// LAST MODIFIED : 6th December 2007
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.1 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Youm et al.'s 2006 mathematical model of pacemaker activity recorded from mouse small intestine.
//
// CHANGES:
// publisher: The University of Auckland, Bioengineering Institute
// comment: FN Catherine Lloyd; This CellML version of the model runs in both COR and PCEnv to replicate the published results. The units have been checked and are consistent. We'd like to acknowledge Nandita Carvalho for providing us with access to her Matlab code, which played a critical role in the process of successfully translating the model into CellML.
// created: W3CDTF 2007-11-06T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// title: Youm et al.'s 2006 mathematical model of pacemaker activity recorded from mouse small intestine.
// comment: FN Catherine Lloyd; This is a CellML description of Youm et al.'s 2006 mathematical model of pacemaker activity recorded from mouse small intestine.
// reference: Pubmed_id 16608700; Given Jae; Family Youm; Other Boum; Given Nari; Family Kim; Given Jin; Family Han; Given Euiyong; Family Kim; Given Hyun; Family Joo; Given Chae; Family Leem; Other Hun; Given Gazunori; Family Goto; Given Akinori; Family Noma; Given Yung; Family Earm; Other E; title A mathematical model of pacemaker activity recorded from mouse small intestine; volume 364; first_page 1135; title Philosophical transactions of the Royal Society of London. Series A, Mathematical and physical sciences; W3CDTF 2006-05-15; last_page 1154
// reference: subject_type keyword; electrophysiology; gastric; small intestine; pacemaker; interstitial cells of Cajal; ICC
def model youm_model_2006 as
  // A mathematical model of pacemaker activity recorded from mouse small intestine
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML version of the model runs in both COR and PCEnv. Although the model produces pacemaker potentials, there are discrepancies between the original and the CellML model - including a different behaviour at the resting membrane potential and a different frequency of generation of slow waves. The units have been checked and are consistent. We'd like to acknowledge Nandita Carvalho for providing us with access to her Matlab code, which played a critical role in the process of successfully translating the model into CellML. Also Alberto Corrias for his feedback on the CellML model
  //
  // Model Structure
  //
  // Phasic gastrointestinal (GI) muscle is able to autonomously generate rhythmic contractions independent of the enteric nervous system. The electrical activity that generates these rhythmic contractions are called slow waves, or pacemaker potentials (PP), and they are produced by a specialised group of pacemaker cells called Insterstitial Cells of Cajal (ICC). Pacemaker potentials pass via gap junctions from the ICC to smooth muscle cells (SMC), activating L-type Ca2+ channels, Ca2+ influx and the contraction of the SMC.
  //
  // In the study described here, Jae Boum Youm et al. have developed a mathematical model which quantitatively describes the transmembrane ion flows and intracellular Ca2+ dynamics from a single ICC pacemaker unit. The model includes seven major currents that flow across the ICC membrane to transport three ions, Na+, Ca2+ and K+ (see the figure below). These currents include: the inward rectifier current (Ik1), L-type Ca2+ current (ICaL), voltage-dependent and dihydropyridine-resistant current (IVDDR), autonomous inward current. (IAI), Na+/Ca2+ exchanger current, (INaCa), Na+/K+ pump current (INaK), and the plasmalemmal Ca2+ pump current (IPMCA).
  //
  // It should be noted that the model described here in CellML is not identical to the published model. Instead, it represents the working model written in Matlab by Nandita Carvalho, who carried out an extensive literature review and had personal correspondence with the author of the original model Jae Boum Youm. On comparison, the final model was able to replicate experimental results and hence it was used to make predictions of slow wave characteristics of the small intestine.
  //
  // model diagram
  //
  // A schematic diagram of the cell model. There are 7 membrane currents. IVDDR is known to be responsible for propagation and its influx into the cell causes a slight depolarisation which increases the probability of Ca2+release from th SR through IP3-gated channels. This further depolarises the cell causing an influx of ions into the cell (via the pacemaker current IAI), which the initiates the slow wave.
  //
  // The complete original paper reference is cited below:
  //
  // A mathematical model of pacemaker activity recorded from mouse small intestine, Jae Boum Youm, Nari Kim, Jin Han, Euiyong Kim, Hyun Joo, Chae Hun Leem, Gazunori Goto, Akinori Noma, and Yung E. Earm, 2006, Philosophical Transactions of the Royal Society of London. Series A, Mathematical and Physical Sciences, 364, 1135-1154. PubMed ID: 16608700 (http://www.ncbi.nlm.nih.gov/sites/entrez?db=pubmed&uid=16608700&cmd=showdetailview&indexed=google)
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt2 as
    unit volt {pref: milli, expo: 2};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar3 as
    unit millimolar {expo: 3};
  enddef;
  def unit picofarad as
    unit farad {pref: pico};
  enddef;
  def unit picoampere_per_millivolt as
    unit picoampere;
    unit millivolt {expo: -1};
  enddef;
  def unit picoampere_millisecond as
    unit picoampere;
    unit millisecond;
  enddef;
  def unit picoampere_per_millimolar as
    unit picoampere;
    unit millimolar {expo: -1};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit per_millivolt_millisecond_millimolar as
    unit millivolt {expo: -1};
    unit millisecond {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit picoampere as
    unit ampere {pref: pico};
  enddef;
  def unit coulomb_millimole as
    unit coulomb;
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit coulomb_millivolt_kelvin_millimole as
    unit coulomb;
    unit millivolt;
    unit kelvin {expo: -1};
    unit mole {pref: milli, expo: -1};
  enddef;
  def unit per_millisecond2 as
    unit millisecond {expo: -2};
  enddef;
  def unit first_order_rate_constant as
    unit millisecond {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit flux as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {pref: micro, expo: 3};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var Vm: millivolt {pub: out, init: -68.0};
    var I_tot: picoampere;
    var I_ext: picoampere {init: 0.0};
    var Cm: picofarad {init: 25.0};
    var I_Ki: picoampere {pub: in};
    var I_CaL: picoampere {pub: in};
    var I_VDDR: picoampere {pub: in};
    var I_AI: picoampere {pub: in};
    var I_NaCa: picoampere {pub: in};
    var I_NaK: picoampere {pub: in};
    var I_PMCA: picoampere {pub: in};
    var time: millisecond {pub: in};
    ode(Vm, time) = -(I_tot+I_ext)/Cm;
    I_tot = I_NaCa+I_NaK+I_PMCA+I_VDDR+I_AI+I_Ki+I_CaL;
  enddef;

  def comp internal_ion_concentrations as
    var Na_i: millimolar {pub: out, init: 5.4};
    var K_i: millimolar {pub: out, init: 140.0};
    var Ca_i: millimolar {pub: out};
    var Na_CF: millimolar {pub: out};
    var K_CF: millimolar {pub: out};
    var Ca_CF: millimolar {pub: out};
    var Inet_Na: picoampere;
    var Inet_K: picoampere;
    var Inet_Ca: picoampere;
    var Cai_A: millimolar {init: 0.0035};
    var I_Ki: picoampere {pub: in};
    var I_CaL_Na: picoampere {pub: in};
    var I_CaL_K: picoampere {pub: in};
    var I_CaL_Ca: picoampere {pub: in};
    var I_VDDR: picoampere {pub: in};
    var I_AI_Na: picoampere {pub: in};
    var I_AI_K: picoampere {pub: in};
    var I_AI_Ca: picoampere {pub: in};
    var I_NaCa: picoampere {pub: in};
    var I_NaK: picoampere {pub: in};
    var I_PMCA: picoampere {pub: in};
    var I_IP3R: picoampere {pub: in};
    var I_up: picoampere {pub: in};
    var I_leak: picoampere {pub: in};
    var Vi: micrometre3 {pub: in};
    var Vm: millivolt {pub: in};
    var T: kelvin {pub: in};
    var R: coulomb_millivolt_kelvin_millimole {pub: in};
    var F: coulomb_millimole {pub: in};
    var Na_o: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var ZNa: dimensionless {pub: in};
    var ZK: dimensionless {pub: in};
    var ZCa: dimensionless {pub: in};
    var time: millisecond {pub: in};
    ode(Na_i, time) = -Inet_Na/(ZNa*F*Vi);
    ode(K_i, time) = -Inet_K/(ZK*F*Vi);
    Ca_i = sel
      case Cai_A <= 0.0{millimolar}:
        0.000000000001{millimolar};
      otherwise:
        Cai_A;
    endsel;
    ode(Cai_A, time) = -(Inet_Ca+I_up-(I_IP3R+I_leak))/(ZCa*F*Vi);
    Inet_Na = I_CaL_Na+I_AI_Na+3.0{dimensionless}*I_NaK+3.0{dimensionless}*I_NaCa;
    Inet_K = I_Ki+I_CaL_K+I_AI_K-2.0{dimensionless}*I_NaK;
    Inet_Ca = I_CaL_Ca+I_VDDR+I_AI_Ca+I_PMCA-2.0{dimensionless}*I_NaCa;
    Na_CF = ZNa*F*Vm/(R*T)*((Na_i-Na_o*exp(-ZNa*F*Vm/(R*T)))/(1.0{dimensionless}-exp(-ZNa*F*Vm/(R*T))));
    K_CF = ZK*F*Vm/(R*T)*((K_i-K_o*exp(-ZK*F*Vm/(R*T)))/(1.0{dimensionless}-exp(-ZK*F*Vm/(R*T))));
    Ca_CF = ZCa*F*Vm/(R*T)*((Ca_i-Ca_o*exp(-ZCa*F*Vm/(R*T)))/(1.0{dimensionless}-exp(-ZCa*F*Vm/(R*T))));
  enddef;

  def comp I_Ki as
    var I_Ki: picoampere {pub: out};
    var fU: dimensionless {priv: out};
    var E_K: millivolt {priv: out};
    var g_Ki: picoampere_per_millivolt {init: 4.32};
    var mu: dimensionless;
    var lambda: dimensionless;
    var time: millisecond {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var T: kelvin {pub: in};
    var R: coulomb_millivolt_kelvin_millimole {pub: in};
    var F: coulomb_millimole {pub: in};
    var n: dimensionless {priv: in};
    I_Ki = g_Ki*pow(K_o/5.4{millimolar}, 0.62{dimensionless})*(Vm-E_K)*n*fU;
    E_K = R*T/(1.0{dimensionless}*F)*ln(K_o/K_i);
    fU = mu/(mu+lambda);
    mu = 3.3{dimensionless}*exp((Vm-(E_K+6.0{millivolt}))/15.0{millivolt});
    lambda = 26.0{dimensionless}*exp((Vm-(E_K+6.0{millivolt}))/52.0{millivolt});
  enddef;

  def comp I_Ki_n_gate as
    var n: dimensionless {pub: out};
    var n_1: dimensionless;
    var n_2: dimensionless;
    var n_3: dimensionless;
    var a: dimensionless;
    var b: dimensionless;
    var AB: dimensionless;
    var fU: dimensionless {pub: in};
    var Vm: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    n_1 = 1.0{dimensionless}/(1.0{dimensionless}+0.1{dimensionless}*exp((Vm-E_K)/15.0{millivolt})+0.048{dimensionless}*exp((Vm-E_K)/7.0{millivolt}));
    n_2 = n_1*AB;
    n_3 = AB-n_2;
    AB = a+b;
    a = 2.5{dimensionless}/(4.7{dimensionless}*exp((Vm-E_K)/28.7{millivolt}));
    b = 2.5{dimensionless}/(6.0{dimensionless}*exp((E_K-Vm)/25.8{millivolt}));
    n = n_2/((n_2+n_3)*pow(1.0{dimensionless}-fU, 3.0{dimensionless}));
  enddef;

  def comp I_CaL as
    var I_CaL: picoampere {pub: out};
    var I_CaL_Ca: picoampere {pub: out};
    var I_CaL_Na: picoampere {pub: out};
    var I_CaL_K: picoampere {pub: out};
    var PCaL: picoampere_per_millimolar {init: 5.76};
    var Na_CF: millimolar {pub: in};
    var K_CF: millimolar {pub: in};
    var Ca_CF: millimolar {pub: in};
    var time: millisecond {pub: in, priv: out};
    var Ca_i: millimolar {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    I_CaL = I_CaL_Ca+I_CaL_K+I_CaL_Na;
    I_CaL_Ca = PCaL*Ca_CF*m*h;
    I_CaL_K = 0.001{dimensionless}*PCaL*K_CF*m*h;
    I_CaL_Na = 0.00005{dimensionless}*PCaL*Na_CF*m*h;
  enddef;

  def comp I_CaL_m_gate as
    var m: dimensionless {pub: out, init: 0.0};
    var alpha_m: first_order_rate_constant;
    var beta_m: first_order_rate_constant;
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = sel
      case Vm == -30.0{millivolt}:
        0.002175{per_millivolt_millisecond}*((Vm+30.0{millivolt})/(1.0{dimensionless}-exp((Vm+30.0{millivolt})/(-2.5{millivolt}))));
      otherwise:
        0.004189268{first_order_rate_constant};
    endsel;
    beta_m = sel
      case Vm == 0.0{millivolt}:
        0.001578959{first_order_rate_constant};
      otherwise:
        0.0006315{per_millivolt_millisecond}*(Vm/(exp(Vm/2.5{millivolt})-1.0{dimensionless}));
    endsel;
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp I_CaL_h_gate as
    var h: dimensionless {pub: out, init: 0.0};
    var alpha_h: first_order_rate_constant;
    var beta_h: first_order_rate_constant;
    var Ca_i: millimolar {pub: in};
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case Vm == -34.0{millivolt}:
        0.000010001{first_order_rate_constant};
      otherwise:
        1.775e-6{per_millivolt_millisecond}*((Vm+34.0{millivolt})/(exp((Vm+34.0{millivolt})/5.633{millivolt})-1.0{dimensionless}));
    endsel;
    beta_h = 0.427{per_millivolt_millisecond_millimolar}*Ca_i*((Vm+64.0{millivolt})/(exp((Vm+44.0{millivolt})/(-4.16{millivolt}))+1.0{dimensionless}));
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp I_VDDR as
    var I_VDDR: picoampere {pub: out};
    var PVDDR: picoampere_per_millimolar {init: 7.92};
    var Ca_CF: millimolar {pub: in};
    var Vm: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    I_VDDR = PVDDR*Ca_CF*m*h;
  enddef;

  def comp I_VDDR_m_gate as
    var m: dimensionless {pub: out};
    var alpha_m: first_order_rate_constant;
    var beta_m: first_order_rate_constant;
    var m2: first_order_rate_constant;
    var m3: dimensionless;
    var Vm: millivolt {pub: in};
    alpha_m = m2/(m3+pow(10.0{dimensionless}, -20.0{dimensionless}));
    m2 = 1.0{first_order_rate_constant}/(1.0{dimensionless}+exp(-(Vm+23.0{millivolt})/6.0999999{millivolt}));
    m3 = (4.4299998{dimensionless}-0.660000003{dimensionless})*exp(-sqr(Vm+150.0{millivolt})/7118.0{millivolt2})+0.660000003{dimensionless};
    beta_m = (1.0{first_order_rate_constant}-m2)/(m3+pow(10.0{dimensionless}, -20.0{dimensionless}));
    m = alpha_m/(alpha_m+beta_m);
  enddef;

  def comp I_VDDR_h_gate as
    var h: dimensionless {pub: out};
    var alpha_h: first_order_rate_constant;
    var beta_h: first_order_rate_constant;
    var h2: first_order_rate_constant;
    var h3: dimensionless;
    var Vm: millivolt {pub: in};
    alpha_h = h2/(h3+pow(10.0{dimensionless}, -20.0{dimensionless}));
    h2 = 1.0{first_order_rate_constant}/(1.0{dimensionless}+exp(-(Vm+75.0{millivolt})/(-6.5999999{millivolt})));
    h3 = (40.799999{dimensionless}-0.83999997{dimensionless})*exp(-sqr(Vm+106.0{millivolt})/2292.0{millivolt2})+0.8399997{dimensionless};
    beta_h = (1.0{first_order_rate_constant}-h2)/(h3+pow(10.0{dimensionless}, -20.0{dimensionless}));
    h = alpha_h/(alpha_h+beta_h);
  enddef;

  def comp I_AI as
    var I_AI: picoampere {pub: out};
    var I_AI_Ca: picoampere {pub: out};
    var I_AI_Na: picoampere {pub: out};
    var I_AI_K: picoampere {pub: out};
    var po: dimensionless;
    var PAI: picoampere_per_millimolar {init: 15.61};
    var Km_Ca_i: millimolar {init: 0.003};
    var Na_CF: millimolar {pub: in};
    var K_CF: millimolar {pub: in};
    var Ca_CF: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    I_AI = I_AI_Ca+I_AI_K+I_AI_Na;
    I_AI_Ca = PAI*Ca_CF*po;
    I_AI_K = 0.36{dimensionless}*PAI*K_CF*po;
    I_AI_Na = 0.4{dimensionless}*PAI*Na_CF*po;
    po = 0.0017{dimensionless}+(1.0{dimensionless}-0.0017{dimensionless})/(1.0{dimensionless}+Km_Ca_i/Ca_i);
  enddef;

  def comp I_NaCa as
    var I_NaCa: picoampere {pub: out};
    var PNaCa: picoampere {init: 8.458};
    var Km_Na_i: millimolar3 {init: 670.0};
    var Km_Na_o: millimolar3 {init: 670000.0};
    var Km_Ca_i: millimolar {init: 0.00138};
    var Km_Ca_o: millimolar {init: 1.38};
    var p_E2Na: dimensionless {priv: out};
    var p_E1Na: dimensionless {priv: out};
    var p_E1Ca: dimensionless {priv: out};
    var p_E2Ca: dimensionless {priv: out};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var T: kelvin {pub: in, priv: out};
    var R: coulomb_millivolt_kelvin_millimole {pub: in, priv: out};
    var F: coulomb_millimole {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var time: millisecond {pub: in, priv: out};
    var y: dimensionless {priv: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    I_NaCa = PNaCa*(m*y-h*(1.0{dimensionless}-y));
    p_E1Na = 1.0{dimensionless}/(1.0{dimensionless}+(1.0{dimensionless}+Ca_i/Km_Ca_i)/(pow(Na_i, 3.0{dimensionless})/Km_Na_i));
    p_E2Na = 1.0{dimensionless}/(1.0{dimensionless}+(1.0{dimensionless}+Ca_o/Km_Ca_o)/(pow(Na_o, 3.0{dimensionless})/Km_Na_o));
    p_E1Ca = 1.0{dimensionless}/(1.0{dimensionless}+(1.0{dimensionless}+pow(Na_i, 3.0{dimensionless})/Km_Na_i)/(Ca_i/Km_Ca_i));
    p_E2Ca = 1.0{dimensionless}/(1.0{dimensionless}+(1.0{dimensionless}+pow(Na_o, 3.0{dimensionless})/Km_Na_o)/(Ca_o/Km_Ca_o));
  enddef;

  def comp I_NaCa_y_gate as
    var y: dimensionless {pub: out, init: 0.9459136};
    var m: dimensionless {pub: out};
    var h: dimensionless {pub: out};
    var alpha_y: first_order_rate_constant;
    var beta_y: first_order_rate_constant;
    var T: kelvin {pub: in};
    var R: coulomb_millivolt_kelvin_millimole {pub: in};
    var F: coulomb_millimole {pub: in};
    var Vm: millivolt {pub: in};
    var time: millisecond {pub: in};
    var p_E1Na: dimensionless {pub: in};
    var p_E2Na: dimensionless {pub: in};
    var p_E1Ca: dimensionless {pub: in};
    var p_E2Ca: dimensionless {pub: in};
    alpha_y = 1.0{first_order_rate_constant}*(h+p_E2Ca);
    beta_y = 1.0{first_order_rate_constant}*(m+p_E1Ca);
    m = p_E1Na*exp(0.32{dimensionless}*(Vm/(R*T/F)));
    h = p_E2Na*exp((0.32{dimensionless}-1.0{dimensionless})*(Vm/(R*T/F)));
    ode(y, time) = alpha_y*(1.0{dimensionless}-y)-beta_y*y;
  enddef;

  def comp I_NaK as
    var I_NaK: picoampere {pub: out};
    var pNaK: picoampere {init: 79.0};
    var Km_Na_i: millimolar {init: 11.0};
    var Km_K_o: millimolar {init: 0.27};
    var Na_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var Vm: millivolt {pub: in};
    I_NaK = pNaK/(1.0{dimensionless}+pow(Km_Na_i/Na_i, 1.36{dimensionless}))*((1.0{dimensionless}-sqr((Vm+50.0{millivolt})/250.0{millivolt}))/(1.0{dimensionless}+Km_K_o/K_o));
  enddef;

  def comp I_PMCA as
    var I_PMCA: picoampere {pub: out};
    var pPMCA: picoampere {init: 927.4};
    var Km_Ca_i: millimolar {init: 0.008};
    var Ca_i: millimolar {pub: in};
    I_PMCA = pPMCA/(1.0{dimensionless}+sqr(Km_Ca_i/Ca_i));
  enddef;

  def comp I_up as
    var I_up: picoampere {pub: out};
    var Pup: picoampere_millisecond {init: 7728.0};
    var Km_Ca_i: millimolar {init: 0.08};
    var Km_Ca_o: millimolar {init: 0.002};
    var p_E2: first_order_rate_constant {priv: out};
    var p_E1: first_order_rate_constant {priv: out};
    var p_E1Ca: first_order_rate_constant {priv: out};
    var p_E2Ca: first_order_rate_constant {priv: out};
    var time: millisecond {pub: in, priv: out};
    var Ca_up: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var y: dimensionless {priv: in};
    I_up = 1.5{dimensionless}*Pup*(p_E2Ca*(1.0{dimensionless}-y)-p_E1Ca*y);
    p_E1Ca = 0.01{first_order_rate_constant}/(1.0{dimensionless}+Km_Ca_i/Ca_up);
    p_E2Ca = 1.0{first_order_rate_constant}/(1.0{dimensionless}+Km_Ca_o/Ca_i);
    p_E1 = 1.0{first_order_rate_constant}/(1.0{dimensionless}+Ca_up/Km_Ca_i);
    p_E2 = 0.01{first_order_rate_constant}/(1.0{dimensionless}+Ca_i/Km_Ca_o);
  enddef;

  def comp I_up_y_gate as
    var y: dimensionless {pub: out, init: 0.1};
    var alpha_y: first_order_rate_constant;
    var beta_y: first_order_rate_constant;
    var time: millisecond {pub: in};
    var p_E1: first_order_rate_constant {pub: in};
    var p_E2: first_order_rate_constant {pub: in};
    var p_E1Ca: first_order_rate_constant {pub: in};
    var p_E2Ca: first_order_rate_constant {pub: in};
    alpha_y = p_E2Ca+p_E2;
    beta_y = p_E1Ca+p_E1;
    ode(y, time) = alpha_y*(1.0{dimensionless}-y)-beta_y*y;
  enddef;

  def comp I_tr as
    var I_tr: picoampere {pub: out};
    var ptr: picoampere_per_millimolar {init: 20.5};
    var Ca_up: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    I_tr = 2.8{dimensionless}*ptr*(Ca_up-Ca_rel);
  enddef;

  def comp I_leak as
    var I_leak: picoampere {pub: out};
    var pleak: picoampere_per_millimolar {init: 0.45};
    var Ca_up: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    I_leak = pleak*(Ca_up-Ca_i);
  enddef;

  def comp I_IP3R as
    var I_IP3R: picoampere {pub: out};
    var PIP3R: picoampere_per_millimolar {init: 217.2};
    var kco: first_order_rate_constant;
    var koi: first_order_rate_constant {init: 0.02};
    var kic: first_order_rate_constant;
    var kci: first_order_rate_constant {init: 0.000849};
    var SC_0: first_order_rate_constant;
    var SC_3: dimensionless;
    var SC_2: dimensionless;
    var SC_1: first_order_rate_constant;
    var m: dimensionless {init: 0.0};
    var h: dimensionless {init: 1.0};
    var m_original: dimensionless;
    var h_original: dimensionless;
    var stO: dimensionless;
    var stA: dimensionless;
    var ndO: dimensionless;
    var ndA: dimensionless;
    var OrgO_N4: first_order_rate_constant;
    var OrgA_N4: first_order_rate_constant;
    var state_c1: first_order_rate_constant;
    var state_c2: first_order_rate_constant;
    var state_c3: first_order_rate_constant;
    var state_d1: first_order_rate_constant;
    var state_d2: first_order_rate_constant;
    var state_d3: first_order_rate_constant;
    var state_bf: first_order_rate_constant;
    var state_sbf: per_millisecond2;
    var kab: first_order_rate_constant;
    var kba: first_order_rate_constant;
    var kbc: first_order_rate_constant;
    var kcb: first_order_rate_constant;
    var kac: first_order_rate_constant;
    var kca: first_order_rate_constant;
    var dt: millisecond {init: 0.2};
    var dt_CellML: millisecond {init: 0.01};
    var Ca_rel: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var IP3: millimolar {pub: in};
    var time: millisecond {pub: in};
    I_IP3R = PIP3R*(Ca_rel-Ca_i)*m;
    kco = 0.147{first_order_rate_constant}*pow(Ca_i/0.000057{millimolar}, 3{dimensionless});
    kic = 0.025{first_order_rate_constant}*pow(IP3/0.001{millimolar}, 3{dimensionless})*(Ca_rel/1.0{millimolar});
    kab = koi;
    kba = 0{first_order_rate_constant};
    kbc = kic;
    kcb = kci;
    kac = 0{first_order_rate_constant};
    kca = kco;
    m_original = stO*exp(-SC_0*dt)+ndO*exp(-SC_1*dt)+SC_2;
    ode(m, time) = (m_original-m)/dt_CellML;
    h_original = stA*exp(-SC_0*dt)+ndA*exp(-SC_1*dt)+SC_3;
    ode(h, time) = (h_original-h)/dt_CellML;
    stO = (OrgO_N4+SC_1*m-SC_2*SC_1)/(SC_1-SC_0);
    ndO = (OrgO_N4+SC_0*m-SC_2*SC_0)/(SC_0-SC_1);
    stA = (OrgA_N4+SC_1*h-SC_3*SC_1)/(SC_1-SC_0);
    ndA = (OrgA_N4+SC_0*h-SC_3*SC_0)/(SC_0-SC_1);
    OrgO_N4 = kco*h-koi*m;
    OrgA_N4 = kic*(1.0{dimensionless}-(h+m))-(kci+kco)*h;
    SC_0 = (state_bf+pow(abs(state_sbf), 0.5{dimensionless}))/2.0{dimensionless};
    SC_1 = (state_bf-pow(abs(state_sbf), 0.5{dimensionless}))/2.0{dimensionless};
    SC_2 = (state_c2*state_d3-state_c3*state_d2)/(state_c1*state_d2-state_c2*state_d1);
    SC_3 = (state_c1*state_d3-state_c3*state_d1)/(state_c2*state_d1-state_c1*state_d2);
    state_bf = kab+kba+kac+kca+kbc+kcb;
    state_sbf = sqr(state_bf)-4.0{dimensionless}*((kbc+kcb+kca)*(kba+kab+kac)-(kac-kbc)*(kca+kba));
    state_c1 = kac-kbc;
    state_c2 = -(kbc+kcb+kca);
    state_c3 = kbc;
    state_d2 = kca-kba;
    state_d1 = -(kba+kab+kac);
    state_d3 = kba;
  enddef;

  def comp calcium_concentrations_in_the_SR as
    var Ca_up: millimolar {pub: out, init: 4.6};
    var Ca_rel: millimolar {pub: out, init: 13.1};
    var I_up: picoampere {pub: in};
    var I_tr: picoampere {pub: in};
    var I_leak: picoampere {pub: in};
    var I_IP3R: picoampere {pub: in};
    var ZCa: dimensionless {pub: in};
    var Vup: micrometre3 {pub: in};
    var Vrel: micrometre3 {pub: in};
    var F: coulomb_millimole {pub: in};
    var time: millisecond {pub: in};
    ode(Ca_up, time) = (I_up-(I_tr+I_leak))/(ZCa*Vup*F);
    ode(Ca_rel, time) = (I_tr-I_IP3R)/(ZCa*Vrel*F);
  enddef;

  def comp IP3_metabolism as
    var IP3: millimolar {pub: out, init: 0.0002682};
    var PIP2: millimolar {pub: out, init: 0.002664};
    var PIP2_IP3: first_order_rate_constant;
    var IP3_PIP2: first_order_rate_constant;
    var IP3_IP4: first_order_rate_constant {init: 0.004};
    var PIP2_IP4: first_order_rate_constant {init: 0.00};
    var IP4_PIP2: first_order_rate_constant;
    var IP3total: millimolar {init: 0.0033};
    var Km_Ca_i: millimolar {init: 0.00001};
    var Vm: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var time: millisecond {pub: in};
    ode(IP3, time) = PIP2_IP3*PIP2-(IP3_PIP2+IP3_IP4)*IP3;
    ode(PIP2, time) = IP3_PIP2*IP3+IP4_PIP2*(IP3total-(IP3+PIP2))-(PIP2_IP4+PIP2_IP3)*PIP2;
    PIP2_IP3 = 0.2{first_order_rate_constant}*exp((Vm+48.5{millivolt})/18.1{millivolt})*(Ca_i/(Ca_i+Km_Ca_i));
    IP3_PIP2 = 0.5{first_order_rate_constant}*exp((Vm+100.0{millivolt})/(-28.5{millivolt}));
    IP4_PIP2 = 0.0035{first_order_rate_constant}*exp((Vm+100.0{millivolt})/(-25.5{millivolt}));
  enddef;

  def comp model_parameters as
    var T: kelvin {pub: out, init: 309.15};
    var R: coulomb_millivolt_kelvin_millimole {pub: out, init: 8.314};
    var F: coulomb_millimole {pub: out, init: 96.485};
    var Na_o: millimolar {pub: out, init: 140.0};
    var K_o: millimolar {pub: out, init: 5.4};
    var Ca_o: millimolar {pub: out, init: 1.8};
    var Vi: micrometre3 {pub: out, init: 715.5};
    var Vup: micrometre3 {pub: out};
    var Vrel: micrometre3 {pub: out};
    var ZNa: dimensionless {pub: out, init: 1.0};
    var ZK: dimensionless {pub: out, init: 1.0};
    var ZCa: dimensionless {pub: out, init: 2.0};
    Vup = 0.1{dimensionless}*Vi;
    Vrel = 0.01{dimensionless}*Vi;
  enddef;

  def group as encapsulation for
    comp I_Ki incl
      comp I_Ki_n_gate;
    endcomp;
    comp I_CaL incl
      comp I_CaL_m_gate;
      comp I_CaL_h_gate;
    endcomp;
    comp I_VDDR incl
      comp I_VDDR_m_gate;
      comp I_VDDR_h_gate;
    endcomp;
    comp I_NaCa incl
      comp I_NaCa_y_gate;
    endcomp;
    comp I_up incl
      comp I_up_y_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between internal_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between I_Ki and environment for
    vars time and time;
  enddef;
  def map between I_CaL and environment for
    vars time and time;
  enddef;
  def map between I_NaCa and environment for
    vars time and time;
  enddef;
  def map between I_up and environment for
    vars time and time;
  enddef;
  def map between calcium_concentrations_in_the_SR and environment for
    vars time and time;
  enddef;
  def map between I_IP3R and environment for
    vars time and time;
  enddef;
  def map between IP3_metabolism and environment for
    vars time and time;
  enddef;
  def map between membrane and I_Ki for
    vars I_Ki and I_Ki;
    vars Vm and Vm;
  enddef;
  def map between membrane and I_CaL for
    vars I_CaL and I_CaL;
    vars Vm and Vm;
  enddef;
  def map between membrane and I_VDDR for
    vars I_VDDR and I_VDDR;
    vars Vm and Vm;
  enddef;
  def map between membrane and I_NaCa for
    vars I_NaCa and I_NaCa;
    vars Vm and Vm;
  enddef;
  def map between membrane and I_AI for
    vars I_AI and I_AI;
  enddef;
  def map between membrane and I_PMCA for
    vars I_PMCA and I_PMCA;
  enddef;
  def map between membrane and I_NaK for
    vars I_NaK and I_NaK;
    vars Vm and Vm;
  enddef;
  def map between internal_ion_concentrations and I_Ki for
    vars K_i and K_i;
    vars I_Ki and I_Ki;
  enddef;
  def map between internal_ion_concentrations and I_CaL for
    vars I_CaL_Na and I_CaL_Na;
    vars I_CaL_Ca and I_CaL_Ca;
    vars I_CaL_K and I_CaL_K;
    vars Ca_i and Ca_i;
    vars Na_CF and Na_CF;
    vars K_CF and K_CF;
    vars Ca_CF and Ca_CF;
  enddef;
  def map between internal_ion_concentrations and I_AI for
    vars I_AI_Na and I_AI_Na;
    vars I_AI_Ca and I_AI_Ca;
    vars I_AI_K and I_AI_K;
    vars Ca_i and Ca_i;
    vars Na_CF and Na_CF;
    vars K_CF and K_CF;
    vars Ca_CF and Ca_CF;
  enddef;
  def map between internal_ion_concentrations and I_VDDR for
    vars I_VDDR and I_VDDR;
    vars Ca_CF and Ca_CF;
  enddef;
  def map between internal_ion_concentrations and I_NaCa for
    vars I_NaCa and I_NaCa;
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
  enddef;
  def map between internal_ion_concentrations and I_NaK for
    vars I_NaK and I_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between internal_ion_concentrations and I_PMCA for
    vars I_PMCA and I_PMCA;
    vars Ca_i and Ca_i;
  enddef;
  def map between internal_ion_concentrations and I_up for
    vars I_up and I_up;
    vars Ca_i and Ca_i;
  enddef;
  def map between internal_ion_concentrations and I_IP3R for
    vars I_IP3R and I_IP3R;
    vars Ca_i and Ca_i;
  enddef;
  def map between internal_ion_concentrations and I_leak for
    vars I_leak and I_leak;
    vars Ca_i and Ca_i;
  enddef;
  def map between membrane and internal_ion_concentrations for
    vars Vm and Vm;
  enddef;
  def map between internal_ion_concentrations and model_parameters for
    vars Vi and Vi;
    vars T and T;
    vars R and R;
    vars F and F;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars Ca_o and Ca_o;
    vars ZCa and ZCa;
    vars ZNa and ZNa;
    vars ZK and ZK;
  enddef;
  def map between I_Ki and model_parameters for
    vars K_o and K_o;
    vars T and T;
    vars R and R;
    vars F and F;
  enddef;
  def map between I_NaCa and model_parameters for
    vars T and T;
    vars R and R;
    vars F and F;
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
  enddef;
  def map between I_NaK and model_parameters for
    vars K_o and K_o;
  enddef;
  def map between I_up and calcium_concentrations_in_the_SR for
    vars Ca_up and Ca_up;
    vars I_up and I_up;
  enddef;
  def map between I_tr and calcium_concentrations_in_the_SR for
    vars Ca_up and Ca_up;
    vars Ca_rel and Ca_rel;
    vars I_tr and I_tr;
  enddef;
  def map between I_leak and calcium_concentrations_in_the_SR for
    vars Ca_up and Ca_up;
    vars I_leak and I_leak;
  enddef;
  def map between I_IP3R and calcium_concentrations_in_the_SR for
    vars Ca_rel and Ca_rel;
    vars I_IP3R and I_IP3R;
  enddef;
  def map between I_IP3R and IP3_metabolism for
    vars IP3 and IP3;
  enddef;
  def map between membrane and IP3_metabolism for
    vars Vm and Vm;
  enddef;
  def map between internal_ion_concentrations and IP3_metabolism for
    vars Ca_i and Ca_i;
  enddef;
  def map between calcium_concentrations_in_the_SR and model_parameters for
    vars Vup and Vup;
    vars Vrel and Vrel;
    vars ZCa and ZCa;
    vars F and F;
  enddef;
  def map between I_Ki and I_Ki_n_gate for
    vars n and n;
    vars time and time;
    vars Vm and Vm;
    vars E_K and E_K;
    vars fU and fU;
  enddef;
  def map between I_CaL and I_CaL_m_gate for
    vars m and m;
    vars time and time;
    vars Vm and Vm;
  enddef;
  def map between I_CaL and I_CaL_h_gate for
    vars h and h;
    vars time and time;
    vars Vm and Vm;
    vars Ca_i and Ca_i;
  enddef;
  def map between I_VDDR and I_VDDR_m_gate for
    vars m and m;
    vars Vm and Vm;
  enddef;
  def map between I_VDDR and I_VDDR_h_gate for
    vars h and h;
    vars Vm and Vm;
  enddef;
  def map between I_NaCa and I_NaCa_y_gate for
    vars y and y;
    vars time and time;
    vars p_E2Na and p_E2Na;
    vars p_E1Na and p_E1Na;
    vars p_E2Ca and p_E2Ca;
    vars p_E1Ca and p_E1Ca;
    vars m and m;
    vars h and h;
    vars T and T;
    vars R and R;
    vars F and F;
    vars Vm and Vm;
  enddef;
  def map between I_up and I_up_y_gate for
    vars y and y;
    vars time and time;
    vars p_E2 and p_E2;
    vars p_E1 and p_E1;
    vars p_E2Ca and p_E2Ca;
    vars p_E1Ca and p_E1Ca;
  enddef;
enddef;
// I_CaL
// title: I_CaL
// alternative: L-type calcium current
// I_CaL_m_gate
// title: I_CaL_m_gate
// alternative: L-type calcium current m gate
// I_CaL_h_gate
// title: I_CaL_h_gate
// alternative: L-type calcium current h gate
// I_VDDR
// title: I_VDDR
// alternative: voltage-dependent and DHP-resistant current
// I_VDDR_m_gate
// title: I_VDDR_m_gate
// alternative: voltage-dependent and DHP-resistant current m gate
// I_VDDR_h_gate
// title: I_VDDR_h_gate
// alternative: voltage-dependent and DHP-resistant current h gate
// I_AI
// title: I_AI
// alternative: autonomous inward current
// I_NaCa
// title: I_NaCa
// alternative: sodium calcium exchange current
// I_NaCa_y_gate
// title: I_NaCa_y_gate
// alternative: sodium calcium exchange current y gate
// I_NaK
// title: I_NaK
// alternative: sodium potassium pump current
// I_PMCA
// title: I_PMCA
// alternative: plasmalemmal calcium pump current
// I_up
// title: I_up
// alternative: SR calcium pump current
// I_up_y_gate
// title: I_up_y_gate
// alternative: SR calcium pump current y gate
// I_tr
// title: I_tr
// alternative: calcium transfer from the SR uptake site to the release site
// I_leak
// title: I_leak
// alternative: calcium leak from the SR
// I_IP3R
// title: I_IP3R
// alternative: IP3-mediated calcium release from the SR
// calcium_concentrations_in_the_SR
// title: calcium_concentrations_in_the_SR
// alternative: calcium concentrations in the SR
// IP3_metabolism
// title: IP3_metabolism
// alternative: IP3 metabolism
