// This CellML file was generated on 26/09/2007 at 15:17:37 using:
//
// COR (0.9.31.789)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; Version 03 was created by Penny Noble of Oxford University and supports simulation of multiple action potentials. This model is known to run in COR and PCEnv. This model also has a PCEnv session file associated with it.
// created: W3CDTF 2007-01-16T00:00:00+00:00
// creator: Orgname Oxford University; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-06-22T13:25:54+12:00; Several variables were given cmeta:id's to allow creation of a PCEnv session.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-01-18T13:25:00+13:00; This model was curated by Penny Noble of Oxford University; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-11-29T12:49:02+13:00; Units checked, curated.; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-04-22T13:25:00+12:00; A stimulus protocol component was added to the model using the amplitude (-6 nanoamps) and duration (1 ms) that was defined for the original single stimulus in the first version of the model.; Given James; Family Lawson; Other Richard
// created: W3CDTF 2006-01-01
// creator: Orgname unknown; Orgunit unknown; unknown; Given unknown; Family unknown; Other unknown
// simulation: nonstandard-pointDensity 100000; maximumStepSize 0.001
// title: unknown
// comment: FN James Lawson; This file contains a CellML 1.0 description of Noble, Noble, Bett, Earm, Ho and So's 1991 computational model of the cardiac action potential, emphasising the effect of the sodium-calcium exchanger on the AP.
// reference: Pubmed_id 1785860; Given D; Family Noble; Given S; Family Noble; Other J; Given G; Family Bett; Other C; Given Y; Family Earm; Other E; Given W; Family Ho; Other K; Given I; Family So; Other K; title The Role of Sodium-Calcium Exchange During the Cardiac Action Potential; volume 639; first_page 344; title Annals of the New York Academy of Sciences; W3CDTF 1991-01-01; last_page 353
// reference: subject_type keyword; cardiac; electrophysiology; Na/Ca exchanger
def model noble_noble_bett_earm_ho_so_1991 as
  // Model Status
  //
  // This model has been curated and unit-checked by Penny Noble of Oxford University and supports simulation of multiple action potentials. This model is known to run in COR and OpenCell.
  //
  // Model Structure
  //
  // Introduction: The idea that sodium-calcium exchange might generate a current during cardiac electrical activity was first raised as a possible mechanism for the pathological situation when calcium-overloaded tissue generates the transient inward current responsible for ectopic beating. This was one of the mechanisms proposed by Kass, Lederer, Tsien, and Weingart in 1978. Mullins had already suggested on theoretical grounds that a variety of currents flowing across the cardiac cell membrane might be carried by sodium-calcium exchange. With regard to the transient inward current, the evidence that it is carried mostly (though not entirely) by sodium-calcium exchange is now very strong in ventricular cells,4 and it has proved possible to reproduce this mechanism in computer models of cardiac electrical activity. The purpose of the present paper is to review the evidence, experimental and theoretical, for a major role of the sodium-calcium exchange current during normal cardiac rhythm.
  //
  // Brown et al. and Arlock and Noble recorded slow components of inward current following the calcium current that were attributed to sodium-calcium exchange activated by the intracellular calcium transient, while Mitchell et al. and Schouten and ter Keurs showed that the exchange current could play a major role in maintaining the late low plateau in rat ventricular cells. Several years previously Simurda et al. showed that a component of inward current during weak depolarizations is directly proportional to contractile force, suggesting that it was calcium activated.
  //
  // Until 1987 it has to be admitted that these explanations were always subject to the criticism that the currents concerned were measured in highly complex situations with many other current components also present. Of course, if the role of sodium-calcium exchange during normal cellular activity is to be assessed, such experiments are necessary, and we will describe more of them later in this paper. But they need to be backed up by experiments done under conditions where the exchange current is isolated from other components. This was first achieved by Kimura, Miyamae, and Noma in 1987. The results were very relevant indeed, not only because they showed the electrogenic nature of the sodium-calcium exchange in cardiac cells (including demonstrating that its most likely stoichiometry was 3 : 1) but also because the current-voltage relations obtained were very similar to those required theoretically in modeling work to explain the results obtained in normal beating cardiac tissue.
  //
  // It is no longer necessary, therefore, to prove the hypothesis that sodium-calcium exchange contributes a significant electric current. The question now is rather a functional one: How large can this current be and can it be sufficient to be primarily responsible for maintaining calcium balance in the heart by generating the major component of calcium efflux? This is the hypothesis that led to the experimental and modeling work done by Hilgemann and Noble. In this paper, we will describe experiments done on atrial and ventricular cells that attempt to refine this hypothesis. We will raise the question of how the contribution of sodium-calcium exchange to the action potential varies with the region of the heart from which the cells come, with the ionic concentration levels (in particular of internal ion concentrations) and with inotropic state.
  //
  // model diagram
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the Noble 1991 model.
  //
  // The complete original paper reference is cited below:
  //
  // The Role of Sodium-Calcium Exchange During the Cardiac Action Potential, by Noble D, Noble SJ, Bett GC, Earm YE, Ho WK, So IK, Annals of the New York Academy of Sciences 1991;639:334-53. PubMed ID: 1785860 (http://www.ncbi.nlm.nih.gov/pubmed/1785860)
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit nanoA_per_millimolar as
    unit ampere {pref: nano};
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {pref: kilo, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -93.7400119196694, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var Cm: microF {init: 9.5e-5};
    var time: second {pub: in};
    var i_K1: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_Ca_L_K: nanoA {pub: in};
    var i_b_K: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_Ca_L_Na: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Ca_L_Ca: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var i_Stim: nanoA;
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 100};
    var stim_period: second {init: 1};
    var stim_duration: second {init: 0.002};
    var stim_amplitude: nanoA {init: -6};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Stim+i_K1+i_to+i_K+i_b_K+i_NaK+i_Na+i_b_Na+i_Ca_L_Na+i_NaCa+i_Ca_L_Ca+i_Ca_L_K+i_b_Ca);
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var E_mh: millivolt {pub: out};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
    E_mh = R*T/F*ln((Na_o+0.12{dimensionless}*K_o)/(Na_i+0.12{dimensionless}*K_i));
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: nanoA {pub: out};
    var K_mk1: millimolar {init: 10, pub: out};
    var g_K1: microS {init: 1};
    var K_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    i_K1 = g_K1*K_o/(K_o+K_mk1)*(V-E_K)/(1{dimensionless}+exp((V-E_K-10{millivolt})*F*2{dimensionless}/(R*T)));
  enddef;

  def comp time_dependent_potassium_current as
    var i_K: nanoA {pub: out};
    var I_K: nanoA;
    var i_K_max: nanoA {init: 1};
    var time: second {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in, priv: out};
    var K_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var x: dimensionless {priv: in};
    I_K = i_K_max*(K_i-K_o*exp(-V*F/(R*T)))/140{millimolar};
    i_K = x*I_K;
  enddef;

  def comp time_dependent_potassium_current_x_gate as
    var x: dimensionless {init: 0.00938586574433011, pub: out};
    var E0xa: millivolt;
    var E0xb: millivolt;
    var alpha_x: per_second;
    var beta_x: per_second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    E0xa = V+50{millivolt};
    alpha_x = 0.5{per_second}*exp(0.0826{per_millivolt}*E0xa)/(1{dimensionless}+exp(0.057{per_millivolt}*E0xa));
    E0xb = V+20{millivolt};
    beta_x = 1.3{per_second}*exp(-0.06{per_millivolt}*E0xb)/(1{dimensionless}+exp(-0.04{per_millivolt}*E0xb));
    ode(x, time) = alpha_x*(1{dimensionless}-x)-beta_x*x;
  enddef;

  def comp potassium_background_current as
    var i_b_K: nanoA {pub: out};
    var g_bk: microS {init: 0.0006};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_b_K = g_bk*(V-E_K);
  enddef;

  def comp fast_sodium_current as
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 2.5};
    var E_mh: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.00143405969732302, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.995414125415674, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var shift_h: millivolt {init: 0};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}-shift_h));
    beta_h = 2000{per_second}/(1{dimensionless}+320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}-shift_h)));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp sodium_background_current as
    var i_b_Na: nanoA {pub: out};
    var g_bna: microS {init: 0.0006};
    var Na_i: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L_Ca: nanoA {pub: out};
    var i_Ca_L_K: nanoA {pub: out};
    var i_Ca_L_Na: nanoA {pub: out};
    var i_Ca_L: nanoA {pub: out};
    var P_Ca_L: nanoA_per_millimolar {init: 0.25};
    var P_CaK: dimensionless {init: 0.002};
    var P_CaNa: dimensionless {init: 0.01};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in, priv: out};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    i_Ca_L_Ca = 4{dimensionless}*P_Ca_L*d*f*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)))*(Ca_i*exp(100{millivolt}*F/(R*T))-Ca_o*exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)));
    i_Ca_L_K = P_CaK*P_Ca_L*d*f*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(K_i*exp(50{millivolt}*F/(R*T))-K_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Na = P_CaNa*P_Ca_L*d*f*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(Na_i*exp(50{millivolt}*F/(R*T))-Na_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L = i_Ca_L_Ca+i_Ca_L_K+i_Ca_L_Na;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 1.91821833548952e-8, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E0_d: millivolt;
    var speed_d: dimensionless {init: 3};
    E0_d = V+24{millivolt}-5{millivolt};
    alpha_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        12{per_millivolt_second}*E0_d/(exp(E0_d/10{millivolt})-1{dimensionless});
    endsel;
    ode(d, time) = speed_d*(alpha_d*(1{dimensionless}-d)-beta_d*d);
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 0.999999956287155, pub: out};
    var alpha_f: per_second;
    var beta_f: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var speed_f: dimensionless {init: 0.5};
    var delta_f: millivolt {init: 0.0001};
    var E0_f: millivolt;
    E0_f = V+34{millivolt};
    alpha_f = sel
      case abs(E0_f) < delta_f:
        25{per_second};
      otherwise:
        6.25{per_millivolt_second}*E0_f/(exp(E0_f/4{millivolt})-1{dimensionless});
    endsel;
    beta_f = 50{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    ode(f, time) = speed_f*(alpha_f*(1{dimensionless}-f)-beta_f*f);
  enddef;

  def comp calcium_background_current as
    var i_b_Ca: nanoA {pub: out};
    var g_bca: microS {init: 0.00025};
    var E_Ca: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp transient_outward_current as
    var i_to: nanoA {pub: out};
    var g_to: microS {init: 0.005};
    var g_tos: dimensionless {init: 0};
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in, priv: out};
    var time: second {pub: in, priv: out};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(g_tos+s*(1{dimensionless}-g_tos))*r*(V-E_K);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {init: 0.997644968939185, pub: out};
    var alpha_s: per_second;
    var beta_s: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_s = 0.033{per_second}*exp(-V/17{millivolt});
    beta_s = 33{per_second}/(1{dimensionless}+exp(-0.125{per_millivolt}*(V+10{millivolt})));
    ode(s, time) = alpha_s*(1{dimensionless}-s)-beta_s*s;
  enddef;

  def comp transient_outward_current_r_gate as
    var r: dimensionless {init: 1.60424507876553e-8, pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = 333{per_second}*(1{dimensionless}/(1{dimensionless}+exp(-(V+4{millivolt})/5{millivolt}))-r);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: nanoA {pub: out};
    var i_NaK_max: nanoA {init: 0.7};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: second {pub: in};
    i_NaK = i_NaK_max*K_o/(K_mK+K_o)*Na_i/(K_mNa+Na_i);
  enddef;

  def comp sodium_calcium_exchanger as
    var i_NaCa: nanoA {pub: out};
    var k_NaCa: nanoA {init: 0.0005};
    var n_NaCa: dimensionless {init: 3};
    var d_NaCa: dimensionless {init: 0};
    var gamma: dimensionless {init: 0.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa = k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_o, n_NaCa)*Ca_i)/((1{millimolar4}+d_NaCa*(Ca_i*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_i/0.0069{millimolar}));
  enddef;

  def comp sarcoplasmic_reticulum_calcium_pump as
    var i_up: millimolar_per_second {pub: out};
    var K_1: dimensionless;
    var K_2: millimolar;
    var K_cyca: millimolar {init: 0.0003};
    var K_xcs: dimensionless {init: 0.4};
    var K_srca: millimolar {init: 0.5};
    var alpha_up: millimolar_per_second {init: 0.4};
    var beta_up: millimolar_per_second {init: 0.03};
    var Ca_i: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    K_1 = K_cyca*K_xcs/K_srca;
    K_2 = Ca_i+Ca_up*K_1+K_cyca*K_xcs+K_cyca;
    i_up = Ca_i/K_2*alpha_up-Ca_up*K_1/K_2*beta_up;
  enddef;

  def comp calcium_translocation as
    var i_trans: millimolar_per_second {pub: out};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    i_trans = 50{per_second}*(Ca_up-Ca_rel);
  enddef;

  def comp calcium_release as
    var i_rel: millimolar_per_second {pub: out};
    var VoltDep: dimensionless;
    var RegBindSite: dimensionless;
    var ActRate: per_second;
    var InactRate: per_second;
    var K_leak_rate: per_second {init: 0};
    var K_m_Ca: millimolar {init: 0.0005};
    var K_m_rel: per_second {init: 250};
    var PrecFrac: dimensionless;
    var ActFrac: dimensionless {init: 0.00267040300939318};
    var ProdFrac: dimensionless {init: 0.522949441962453};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    VoltDep = exp(0.08{per_millivolt}*(V-40{millivolt}));
    RegBindSite = sqr(Ca_i/(Ca_i+K_m_Ca));
    ActRate = 500{per_second}*RegBindSite;
    InactRate = 60{per_second}+500{per_second}*RegBindSite;
    PrecFrac = 1{dimensionless}-ActFrac-ProdFrac;
    ode(ActFrac, time) = PrecFrac*ActRate-ActFrac*InactRate;
    ode(ProdFrac, time) = ActFrac*InactRate-1{per_second}*ProdFrac;
    i_rel = (sqr(ActFrac/(ActFrac+0.25{dimensionless}))*K_m_rel+K_leak_rate)*Ca_rel;
  enddef;

  def comp extracellular_sodium_concentration as
    var Na_o: millimolar {init: 140, pub: out};
  enddef;

  def comp intracellular_sodium_concentration as
    var Na_i: millimolar {init: 7.50547214142684, pub: out};
    var V_i: micrometre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_Ca_L_Na: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    ode(Na_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa+i_Ca_L_Na);
  enddef;

  def comp extracellular_calcium_concentration as
    var Ca_o: millimolar {init: 2, pub: out};
  enddef;

  def comp extracellular_potassium_concentration as
    var K_o: millimolar {init: 4, pub: out};
  enddef;

  def comp intracellular_potassium_concentration as
    var K_i: millimolar {init: 136.604284305878, pub: out};
    var V_i: micrometre3 {pub: in};
    var i_K1: nanoA {pub: in};
    var i_K: nanoA {pub: in};
    var i_Ca_L_K: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_b_K: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(K_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_K1+i_K+i_Ca_L_K+i_to+i_b_K-2{dimensionless}*i_NaK);
  enddef;

  def comp intracellular_calcium_concentration as
    var Ca_i: millimolar {init: 1.34858164771406e-5, pub: out};
    var Ca_up: millimolar {init: 0.59333810408885, pub: out};
    var Ca_rel: millimolar {init: 0.591323137897127, pub: out};
    var Ca_Calmod: millimolar {init: 0.000524570960945961};
    var Ca_Trop: millimolar {init: 0.00033477224086766};
    var Calmod: millimolar {init: 0.02};
    var Trop: millimolar {init: 0.05};
    var alpha_Calmod: per_millimolar_second {init: 100000};
    var beta_Calmod: per_second {init: 50};
    var alpha_Trop: per_millimolar_second {init: 100000};
    var beta_Trop: per_second {init: 200};
    var radius: micrometre {init: 0.012};
    var length: micrometre {init: 0.074};
    var V_i: micrometre3 {pub: out};
    var V_Cell: micrometre3;
    var V_i_ratio: dimensionless;
    var V_rel_ratio: dimensionless {init: 0.1};
    var V_e_ratio: dimensionless {init: 0.4};
    var V_up_ratio: dimensionless {init: 0.01};
    var i_up: millimolar_per_second {pub: in};
    var i_trans: millimolar_per_second {pub: in};
    var i_rel: millimolar_per_second {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_Ca_L_Ca: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    V_Cell = 3.141592654{dimensionless}*sqr(radius)*length;
    V_i_ratio = 1{dimensionless}-V_e_ratio-V_up_ratio-V_rel_ratio;
    V_i = V_Cell*V_i_ratio;
    ode(Ca_i, time) = -1{mA_nA}/(2{dimensionless}*1{litre_micrometre3}*V_i*F)*(i_Ca_L_Ca+i_b_Ca-2{dimensionless}*i_NaCa)+i_rel*V_rel_ratio/V_i_ratio-ode(Ca_Calmod, time)-ode(Ca_Trop, time)-i_up;
    ode(Ca_up, time) = V_i_ratio/V_up_ratio*i_up-i_trans;
    ode(Ca_rel, time) = V_up_ratio/V_rel_ratio*i_trans-i_rel;
    ode(Ca_Calmod, time) = alpha_Calmod*Ca_i*(Calmod-Ca_Calmod)-beta_Calmod*Ca_Calmod;
    ode(Ca_Trop, time) = alpha_Trop*Ca_i*(Trop-Ca_Trop)-beta_Trop*Ca_Trop;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_x_gate;
      endcomp;
      comp potassium_background_current;
      comp time_independent_potassium_current;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_calcium_exchanger;
      comp sarcoplasmic_reticulum_calcium_pump;
      comp calcium_translocation;
      comp calcium_release;
      comp extracellular_sodium_concentration;
      comp intracellular_sodium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
      comp extracellular_calcium_concentration;
      comp intracellular_calcium_concentration;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_x_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between potassium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_translocation and environment for
    vars time and time;
  enddef;
  def map between calcium_release and environment for
    vars time and time;
  enddef;
  def map between calcium_release and membrane for
    vars V and V;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L_Ca and i_Ca_L_Ca;
    vars i_Ca_L_Na and i_Ca_L_Na;
    vars i_Ca_L_K and i_Ca_L_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and potassium_background_current for
    vars V and V;
    vars i_b_K and i_b_K;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and intracellular_sodium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_potassium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_calcium_concentration for
    vars F and F;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and potassium_background_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_mh and E_mh;
  enddef;
  def map between reversal_potentials and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between reversal_potentials and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between reversal_potentials and intracellular_potassium_concentration for
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and intracellular_sodium_concentration for
    vars Na_i and Na_i;
  enddef;
  def map between reversal_potentials and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between reversal_potentials and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and intracellular_potassium_concentration for
    vars i_K1 and i_K1;
  enddef;
  def map between time_dependent_potassium_current and intracellular_potassium_concentration for
    vars i_K and i_K;
    vars K_i and K_i;
  enddef;
  def map between time_dependent_potassium_current and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between potassium_background_current and intracellular_potassium_concentration for
    vars i_b_K and i_b_K;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_b_Na and i_b_Na;
    vars Na_i and Na_i;
  enddef;
  def map between L_type_Ca_channel and intracellular_sodium_concentration for
    vars i_Ca_L_Na and i_Ca_L_Na;
    vars Na_i and Na_i;
  enddef;
  def map between L_type_Ca_channel and intracellular_calcium_concentration for
    vars i_Ca_L_Ca and i_Ca_L_Ca;
    vars Ca_i and Ca_i;
  enddef;
  def map between L_type_Ca_channel and intracellular_potassium_concentration for
    vars i_Ca_L_K and i_Ca_L_K;
    vars K_i and K_i;
  enddef;
  def map between L_type_Ca_channel and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between L_type_Ca_channel and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between L_type_Ca_channel and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between sodium_potassium_pump and intracellular_potassium_concentration for
    vars i_NaK and i_NaK;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars i_to and i_to;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_calcium_concentration for
    vars i_NaCa and i_NaCa;
    vars Ca_i and Ca_i;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_sodium_concentration for
    vars i_NaCa and i_NaCa;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and intracellular_calcium_concentration for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_translocation and intracellular_calcium_concentration for
    vars i_trans and i_trans;
    vars Ca_rel and Ca_rel;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_release and intracellular_calcium_concentration for
    vars i_rel and i_rel;
    vars Ca_rel and Ca_rel;
    vars Ca_i and Ca_i;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between intracellular_potassium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
enddef;
