//   FILE :  spiro_model_1997.xml
//
// CREATED :  29th October 2001
//
// LAST MODIFIED : 9th April 2003
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification .
//
// DESCRIPTION :  This file contains a CellML description of Spiro, Parkinson and Othmer's 1997 model of excitation and adaptation in bacterial chemotaxis.
//
// CHANGES:
//   22/01/2002 - AAC - Updated metadata to conform to the 16/1/02 CellML Metadata
//                      1.0 Specification.
//   19/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
// publisher: The University of Auckland, Bioengineering Research Group
// comment: FN Catherine Lloyd; This CellML model has been recoded to remove the reaction element. The model runs in both PCEnv and COR but the simulation results may deviate slightly from those which are published in the original paper. We were unsure about the initial conditions used so where we were unsure we set everything to an initial concentration of 0.01 micromolar. Furthermore, where the paper clearly states that Michaelis Menten kinetics were used for the methylation reactions, and Vmax and KR appear in the equations, values for these parameters were not provided. We have derived these values from k1a, k1b and k1c (etc.) but we must highlight that these values may be incorrect. All the units have been checked and are consistent.
// created: W3CDTF 2001-10-29T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Research Group; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2008-01-08T10:59:40+13:00; Recoded the model to remove the reaction element.; Given Catherine; Family Lloyd; Other May
// title: A model of excitation and adaptation in bacterial chemotaxis
// comment: FN Catherine Lloyd; This is the CellML description of Spiro, Parkinson and Othmer's mathematical model of excitation and adaptation in bacterial chemotaxis (1997).
// reference: subject_type keyword; bacterial chemotaxis; cell migration; signal transduction
// reference: Pubmed_id 9207079; Given Peter; Family Spiro; Other A; Given John; Family Parkinson; Other S; Given Hans; Family Othmer; Other G; title A model of excitation and adaptation in bacterial chemotaxis; volume 94; first_page 7263; title Proc. Natl. Acad. Sci. USA; W3CDTF 1997-07-08; last_page 7268
// species: Escherichia coli
def model spiro_model_1997 as
  // A Model Of Excitation And Adaptation In Bacterial Chemotaxis
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model has been recoded to remove the reaction element. The model runs in both PCEnv and COR but the simulation results may deviate slightly from those which are published in the original paper. We were unsure about the initial conditions used so where we were unsure we set everything to an initial concentration of 0.01 micromolar. Furthermore, where the paper clearly states that Michaelis Menten kinetics were used for the methylation reactions, and Vmax and KR appear in the equations, values for these parameters were not provided. We have derived these values from k1a, k1b and k1c (etc.) but we must highlight that these values may be incorrect. All the units have been checked and are consistent.
  //
  // Model Structure
  //
  // In 1997, Peter A. Spiro, John S. Parkinson and Hans G. Othmer published a mathematical model which examined the mechanisms of excitation and adaptation in bacterial chemotaxis (see the figure below). Chemotaxis is the process by which a cell alters its speed or frequency of turning in response to an extracellular chemical stimulus. It is an example of a signal transduction pathway, with features of extreme sensitivity, signal amplification and adaptation: bacteria only respond to changes in their environment rather than to the absolute state of their environment.
  //
  // In their model, Peter A. Spiro, John S. Parkinson and Hans G. Othmer describe how the phosphorylation cascade and signal amplification account for the extreme bacterial sensitivity to stimuli and how the receptor's multiple methylation states allow adaptation to occur.
  //
  // The complete original paper reference is cited below:
  //
  // A model of excitation and adaptation in bacterial chemotaxis, Peter A. Spiro, John S. Parkinson and Hans G. Othmer, 1997, Proc. Natl. Acad. Sci. USA, 94, 7263-7268. PubMed ID: 9207079 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=9207079&dopt=Abstract)
  //
  // the conventional rendering of a bacterial chemotaxis pathway
  //
  // A rendering of a bacterial chemotaxis pathway.
  //
  // In CellML, models are thought of as connected networks of discrete components. These components may correspond to physiologically separated regions or chemically distinct objects, or may be useful modelling abstractions. This model has 61 components representing chemically distinct objects (23 chemical species and 38 reactions) and one component defined for modelling convenience which stores the universal variable time. Because this model has so many components, its CellML rendering would be complex. For an example of a CellML rendering of a reaction pathway see The Bhalla Iyengar EGF Pathway Model, 1999.
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit molar {pref: micro};
  enddef;
  def unit flux as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit molar {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp T2 as
    var T2: micromolar {pub: out, init: 0.01};
    var Vmax: flux;
    var KR: molar;
    var LT2: micromolar {pub: in};
    var T2R: micromolar {pub: in};
    var R: micromolar {pub: in};
    var T3: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var T2p: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k5: second_order_rate_constant {pub: in};
    var k_5: first_order_rate_constant {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var k_1: second_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var k1a: first_order_rate_constant {pub: in};
    var k1b: second_order_rate_constant {pub: in};
    var k1c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T2, time) = k_5*LT2+k_1*Bp*T3+ky*T2p*(Y0-Yp)+kb*T2p*(B0-Bp)-(k5*L*T2+k8*T2+Vmax*(T2/(KR+T2)));
    KR = (k1a+k1c)/k1b;
    Vmax = k1c*(R+T2R);
  enddef;

  def comp T3 as
    var T3: micromolar {pub: out, init: 0.01};
    var Vmax: flux;
    var KR: molar;
    var LT3: micromolar {pub: in};
    var T3R: micromolar {pub: in};
    var R: micromolar {pub: in};
    var T4: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var T3p: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k6: second_order_rate_constant {pub: in};
    var k_6: first_order_rate_constant {pub: in};
    var k9: first_order_rate_constant {pub: in};
    var k_2: second_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var k2a: first_order_rate_constant {pub: in};
    var k2b: second_order_rate_constant {pub: in};
    var k2c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T3, time) = k_6*LT3+k_2*Bp*T4+ky*T3p*(Y0-Yp)+kb*T3p*(B0-Bp)-(k6*L*T3+k9*T3+Vmax*(T3/(KR+T3)));
    KR = (k2a+k2c)/k2b;
    Vmax = k2c*(R+T3R);
  enddef;

  def comp T4 as
    var T4: micromolar {pub: out, init: 0.01};
    var LT4: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var T4p: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k_7: first_order_rate_constant {pub: in};
    var k10: first_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T4, time) = k_7*LT4+ky*T4p*(Y0-Yp)+kb*T4p*(B0-Bp)-(k7*L*T4+k10*T4);
  enddef;

  def comp T2p as
    var T2p: micromolar {pub: out, init: 0.01};
    var Vmax: flux;
    var KR: molar;
    var LT2p: micromolar {pub: in};
    var T2pR: micromolar {pub: in};
    var R: micromolar {pub: in};
    var T3p: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var T2: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k5: second_order_rate_constant {pub: in};
    var k_5: first_order_rate_constant {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var k_1: second_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var k1a: first_order_rate_constant {pub: in};
    var k1b: second_order_rate_constant {pub: in};
    var k1c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T2p, time) = k_5*LT2p+k_1*Bp*T3p+ky*T2*(Y0-Yp)+kb*T2*(B0-Bp)-(k5*L*T2p+k8*T2p+Vmax*(T2p/(KR+T2p)));
    KR = (k1a+k1c)/k1b;
    Vmax = k1c*(R+T2pR);
  enddef;

  def comp T3p as
    var T3p: micromolar {pub: out, init: 0.01};
    var Vmax: flux;
    var KR: molar;
    var LT3p: micromolar {pub: in};
    var T3pR: micromolar {pub: in};
    var R: micromolar {pub: in};
    var T4p: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var T3: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k6: second_order_rate_constant {pub: in};
    var k_6: first_order_rate_constant {pub: in};
    var k9: first_order_rate_constant {pub: in};
    var k_2: second_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var k2a: first_order_rate_constant {pub: in};
    var k2b: second_order_rate_constant {pub: in};
    var k2c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T3p, time) = k_6*LT3p+k_2*Bp*T4p+ky*T3*(Y0-Yp)+kb*T3*(B0-Bp)-(k6*L*T3p+k9*T3p+Vmax*(T3p/(KR+T3p)));
    KR = (k2a+k2c)/k2b;
    Vmax = k2c*(R+T3pR);
  enddef;

  def comp T4p as
    var T4p: micromolar {pub: out, init: 0.01};
    var LT4p: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var T4: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k_7: first_order_rate_constant {pub: in};
    var k10: first_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T4p, time) = k_7*LT4p+ky*T4*(Y0-Yp)+kb*T4*(B0-Bp)-(k7*L*T4p+k10*T4p);
  enddef;

  def comp LT2 as
    var LT2: micromolar {pub: out, init: 0.01};
    var Vmax: flux;
    var KR: molar;
    var T2: micromolar {pub: in};
    var LT2R: micromolar {pub: in};
    var R: micromolar {pub: in};
    var LT3: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var LT2p: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k5: second_order_rate_constant {pub: in};
    var k_5: first_order_rate_constant {pub: in};
    var k11: first_order_rate_constant {pub: in};
    var k_3: second_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var k3a: first_order_rate_constant {pub: in};
    var k3b: second_order_rate_constant {pub: in};
    var k3c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT2, time) = k_5*T2+k_3*Bp*LT3+ky*LT2p*(Y0-Yp)+kb*LT2p*(B0-Bp)-(k5*L*LT2+k11*LT2+Vmax*(LT2/(KR+LT2)));
    KR = (k3a+k3c)/k3b;
    Vmax = k3c*(R+LT2R);
  enddef;

  def comp LT3 as
    var LT3: micromolar {pub: out, init: 0.01};
    var Vmax: flux;
    var KR: molar;
    var T3: micromolar {pub: in};
    var LT3R: micromolar {pub: in};
    var R: micromolar {pub: in};
    var LT4: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var LT3p: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k6: second_order_rate_constant {pub: in};
    var k_6: first_order_rate_constant {pub: in};
    var k12: first_order_rate_constant {pub: in};
    var k_4: second_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var k4a: first_order_rate_constant {pub: in};
    var k4b: second_order_rate_constant {pub: in};
    var k4c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT3, time) = k_6*T3+k_4*Bp*LT4+ky*LT3p*(Y0-Yp)+kb*LT3p*(B0-Bp)-(k6*L*LT3+k12*LT3+Vmax*(LT3/(KR+LT3)));
    KR = (k4a+k4c)/k4b;
    Vmax = k4c*(R+LT3R);
  enddef;

  def comp LT4 as
    var LT4: micromolar {pub: out, init: 0.01};
    var T4: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var LT4p: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k_7: first_order_rate_constant {pub: in};
    var k13: first_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT4, time) = k_7*T4+ky*LT4p*(Y0-Yp)+kb*LT4p*(B0-Bp)-(k7*L*LT4+k13*LT4);
  enddef;

  def comp LT2p as
    var LT2p: micromolar {pub: out, init: 0.01};
    var Vmax: flux;
    var KR: molar;
    var T2p: micromolar {pub: in};
    var LT2pR: micromolar {pub: in};
    var R: micromolar {pub: in};
    var LT3p: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var LT2: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k5: second_order_rate_constant {pub: in};
    var k_5: first_order_rate_constant {pub: in};
    var k11: first_order_rate_constant {pub: in};
    var k_3: second_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var k3a: first_order_rate_constant {pub: in};
    var k3b: second_order_rate_constant {pub: in};
    var k3c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT2p, time) = k_5*T2p+k_3*Bp*LT3p+ky*LT2*(Y0-Yp)+kb*LT2*(B0-Bp)-(k5*L*LT2p+k11*LT2p+Vmax*(LT2p/(KR+LT2p)));
    KR = (k3a+k3c)/k3b;
    Vmax = k3c*(R+LT2pR);
  enddef;

  def comp LT3p as
    var LT3p: micromolar {pub: out, init: 0.01};
    var Vmax: flux;
    var KR: molar;
    var T3p: micromolar {pub: in};
    var LT3pR: micromolar {pub: in};
    var R: micromolar {pub: in};
    var LT4p: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var LT3: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k6: second_order_rate_constant {pub: in};
    var k_6: first_order_rate_constant {pub: in};
    var k12: first_order_rate_constant {pub: in};
    var k_4: second_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var k4a: first_order_rate_constant {pub: in};
    var k4b: second_order_rate_constant {pub: in};
    var k4c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT3p, time) = k_6*T3p+k_4*Bp*LT4p+ky*LT3*(Y0-Yp)+kb*LT3*(B0-Bp)-(k6*L*LT3p+k12*LT3p+Vmax*(LT3p/(KR+LT3p)));
    KR = (k4a+k4c)/k4b;
    Vmax = k4c*(R+LT3pR);
  enddef;

  def comp LT4p as
    var LT4p: micromolar {pub: out, init: 0.01};
    var T4p: micromolar {pub: in};
    var L: micromolar {pub: in};
    var Bp: micromolar {pub: in};
    var LT4: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var Yp: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k_7: first_order_rate_constant {pub: in};
    var k13: first_order_rate_constant {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT4p, time) = k_7*T4p+ky*LT4p*(Y0-Yp)+kb*LT4p*(B0-Bp)-(k7*L*LT4p+k13*LT4p);
  enddef;

  def comp Yp as
    var Yp: micromolar {pub: out, init: 0.01};
    var P: micromolar {pub: in};
    var Z: micromolar {pub: in};
    var Y0: micromolar {pub: in};
    var ky: second_order_rate_constant {pub: in};
    var k_y: second_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Yp, time) = ky*P*(Y0-Yp)-k_y*Z*Yp;
  enddef;

  def comp Bp as
    var Bp: micromolar {pub: out, init: 0.01};
    var P: micromolar {pub: in};
    var B0: micromolar {pub: in};
    var kb: second_order_rate_constant {pub: in};
    var k_b: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(Bp, time) = kb*P*(B0-Bp)-k_b*Bp;
  enddef;

  def comp P as
    var P: micromolar {pub: out};
    var T2p: micromolar {pub: in};
    var LT2p: micromolar {pub: in};
    var T3p: micromolar {pub: in};
    var LT3p: micromolar {pub: in};
    var T4p: micromolar {pub: in};
    var LT4p: micromolar {pub: in};
    P = T2p+LT2p+T3p+LT3p+T4p+LT4p;
  enddef;

  def comp T2R as
    var T2R: micromolar {pub: out, init: 0.01};
    var T2: micromolar {pub: in};
    var R: micromolar {pub: in};
    var k1a: first_order_rate_constant {pub: in};
    var k1b: second_order_rate_constant {pub: in};
    var k1c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T2R, time) = k1b*T2*R-(k1a*T2R+k1c*T2R);
  enddef;

  def comp T3R as
    var T3R: micromolar {pub: out, init: 0.01};
    var T3: micromolar {pub: in};
    var R: micromolar {pub: in};
    var k2a: first_order_rate_constant {pub: in};
    var k2b: second_order_rate_constant {pub: in};
    var k2c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T3R, time) = k2b*T3*R-(k2a*T3R+k2c*T3R);
  enddef;

  def comp T2pR as
    var T2pR: micromolar {pub: out, init: 0.01};
    var T2p: micromolar {pub: in};
    var R: micromolar {pub: in};
    var k1a: first_order_rate_constant {pub: in};
    var k1b: second_order_rate_constant {pub: in};
    var k1c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T2pR, time) = k1b*T2p*R-(k1a*T2pR+k1c*T2pR);
  enddef;

  def comp T3pR as
    var T3pR: micromolar {pub: out, init: 0.01};
    var T3p: micromolar {pub: in};
    var R: micromolar {pub: in};
    var k2a: first_order_rate_constant {pub: in};
    var k2b: second_order_rate_constant {pub: in};
    var k2c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(T3pR, time) = k2b*T3p*R-(k2a*T3pR+k2c*T3pR);
  enddef;

  def comp LT2R as
    var LT2R: micromolar {pub: out, init: 0.01};
    var LT2: micromolar {pub: in};
    var R: micromolar {pub: in};
    var k3a: first_order_rate_constant {pub: in};
    var k3b: second_order_rate_constant {pub: in};
    var k3c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT2R, time) = k3b*LT2*R-(k3a*LT2R+k3c*LT2R);
  enddef;

  def comp LT3R as
    var LT3R: micromolar {pub: out, init: 0.01};
    var LT3: micromolar {pub: in};
    var R: micromolar {pub: in};
    var k4a: first_order_rate_constant {pub: in};
    var k4b: second_order_rate_constant {pub: in};
    var k4c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT3R, time) = k4b*LT3*R-(k4a*LT3R+k4c*LT3R);
  enddef;

  def comp LT2pR as
    var LT2pR: micromolar {pub: out, init: 0.01};
    var LT2p: micromolar {pub: in};
    var R: micromolar {pub: in};
    var k3a: first_order_rate_constant {pub: in};
    var k3b: second_order_rate_constant {pub: in};
    var k3c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT2pR, time) = k3b*LT2p*R-(k3a*LT2pR+k3c*LT2pR);
  enddef;

  def comp LT3pR as
    var LT3pR: micromolar {pub: out, init: 0.01};
    var LT3p: micromolar {pub: in};
    var R: micromolar {pub: in};
    var k4a: first_order_rate_constant {pub: in};
    var k4b: second_order_rate_constant {pub: in};
    var k4c: first_order_rate_constant {pub: in};
    var time: second {pub: in};
    ode(LT3pR, time) = k4b*LT3p*R-(k4a*LT3pR+k4c*LT3pR);
  enddef;

  def comp L as
    var L: micromolar {pub: out, init: 3.0};
  enddef;

  def comp R as
    var R: micromolar {pub: out, init: 0.3};
  enddef;

  def comp Z as
    var Z: micromolar {pub: out, init: 40.0};
  enddef;

  def comp Y0 as
    var Y0: micromolar {pub: out, init: 20.0};
  enddef;

  def comp B0 as
    var B0: micromolar {pub: out, init: 1.7};
  enddef;

  def comp model_parameters as
    var k1c: first_order_rate_constant {pub: out, init: 0.17};
    var k2c: first_order_rate_constant {pub: out, init: 0.017};
    var k3c: first_order_rate_constant {pub: out, init: 5.1};
    var k4c: first_order_rate_constant {pub: out, init: 0.51};
    var k1a: first_order_rate_constant {pub: out, init: 10};
    var k2a: first_order_rate_constant {pub: out, init: 10};
    var k3a: first_order_rate_constant {pub: out, init: 10};
    var k4a: first_order_rate_constant {pub: out, init: 10};
    var k1b: second_order_rate_constant {pub: out, init: 17};
    var k2b: second_order_rate_constant {pub: out, init: 17};
    var k3b: second_order_rate_constant {pub: out, init: 17};
    var k4b: second_order_rate_constant {pub: out, init: 17};
    var k_1: second_order_rate_constant {pub: out, init: 4E5};
    var k_2: second_order_rate_constant {pub: out, init: 3E4};
    var k_3: second_order_rate_constant {pub: out, init: 4E5};
    var k_4: second_order_rate_constant {pub: out, init: 3E4};
    var k5: second_order_rate_constant {pub: out, init: 7E7};
    var k6: second_order_rate_constant {pub: out, init: 7E7};
    var k7: second_order_rate_constant {pub: out, init: 7E7};
    var k_5: first_order_rate_constant {pub: out, init: 70.0};
    var k_6: first_order_rate_constant {pub: out, init: 70.0};
    var k_7: first_order_rate_constant {pub: out, init: 70.0};
    var k8: first_order_rate_constant {pub: out, init: 15.0};
    var k9: first_order_rate_constant {pub: out, init: 45.0};
    var k10: first_order_rate_constant {pub: out, init: 48.0};
    var k11: first_order_rate_constant {pub: out, init: 0.0};
    var k12: first_order_rate_constant {pub: out, init: 16.5};
    var k13: first_order_rate_constant {pub: out, init: 34.56};
    var kb: second_order_rate_constant {pub: out, init: 8E5};
    var ky: second_order_rate_constant {pub: out, init: 3E7};
    var k_b: first_order_rate_constant {pub: out, init: 0.35};
    var k_y: second_order_rate_constant {pub: out, init: 5E5};
  enddef;
  def map between T2 and environment for
    vars time and time;
  enddef;
  def map between T3 and environment for
    vars time and time;
  enddef;
  def map between T4 and environment for
    vars time and time;
  enddef;
  def map between T2p and environment for
    vars time and time;
  enddef;
  def map between T3p and environment for
    vars time and time;
  enddef;
  def map between T4p and environment for
    vars time and time;
  enddef;
  def map between LT2 and environment for
    vars time and time;
  enddef;
  def map between LT3 and environment for
    vars time and time;
  enddef;
  def map between LT4 and environment for
    vars time and time;
  enddef;
  def map between LT2p and environment for
    vars time and time;
  enddef;
  def map between LT3p and environment for
    vars time and time;
  enddef;
  def map between LT4p and environment for
    vars time and time;
  enddef;
  def map between T2R and environment for
    vars time and time;
  enddef;
  def map between T3R and environment for
    vars time and time;
  enddef;
  def map between T2pR and environment for
    vars time and time;
  enddef;
  def map between T3pR and environment for
    vars time and time;
  enddef;
  def map between LT2R and environment for
    vars time and time;
  enddef;
  def map between LT3R and environment for
    vars time and time;
  enddef;
  def map between LT2pR and environment for
    vars time and time;
  enddef;
  def map between LT3pR and environment for
    vars time and time;
  enddef;
  def map between Yp and environment for
    vars time and time;
  enddef;
  def map between Bp and environment for
    vars time and time;
  enddef;
  def map between T2 and LT2 for
    vars LT2 and LT2;
    vars T2 and T2;
  enddef;
  def map between T2 and T2R for
    vars T2R and T2R;
    vars T2 and T2;
  enddef;
  def map between T2 and R for
    vars R and R;
  enddef;
  def map between T2 and T3 for
    vars T3 and T3;
  enddef;
  def map between T2 and L for
    vars L and L;
  enddef;
  def map between T2 and Bp for
    vars Bp and Bp;
  enddef;
  def map between T2 and T2p for
    vars T2p and T2p;
    vars T2 and T2;
  enddef;
  def map between T2 and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between T2 and Yp for
    vars Yp and Yp;
  enddef;
  def map between T2 and B0 for
    vars B0 and B0;
  enddef;
  def map between T2 and model_parameters for
    vars k5 and k5;
    vars k_5 and k_5;
    vars k8 and k8;
    vars k_1 and k_1;
    vars ky and ky;
    vars kb and kb;
    vars k1a and k1a;
    vars k1b and k1b;
    vars k1c and k1c;
  enddef;
  def map between T3 and LT3 for
    vars LT3 and LT3;
    vars T3 and T3;
  enddef;
  def map between T3 and T3R for
    vars T3R and T3R;
    vars T3 and T3;
  enddef;
  def map between T3 and R for
    vars R and R;
  enddef;
  def map between T3 and T4 for
    vars T4 and T4;
  enddef;
  def map between T3 and L for
    vars L and L;
  enddef;
  def map between T3 and Bp for
    vars Bp and Bp;
  enddef;
  def map between T3 and T3p for
    vars T3p and T3p;
    vars T3 and T3;
  enddef;
  def map between T3 and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between T3 and Yp for
    vars Yp and Yp;
  enddef;
  def map between T3 and B0 for
    vars B0 and B0;
  enddef;
  def map between T3 and model_parameters for
    vars k6 and k6;
    vars k_6 and k_6;
    vars k9 and k9;
    vars k_2 and k_2;
    vars ky and ky;
    vars kb and kb;
    vars k2a and k2a;
    vars k2b and k2b;
    vars k2c and k2c;
  enddef;
  def map between T4 and LT4 for
    vars LT4 and LT4;
    vars T4 and T4;
  enddef;
  def map between T4 and L for
    vars L and L;
  enddef;
  def map between T4 and Bp for
    vars Bp and Bp;
  enddef;
  def map between T4 and T4p for
    vars T4p and T4p;
    vars T4 and T4;
  enddef;
  def map between T4 and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between T4 and Yp for
    vars Yp and Yp;
  enddef;
  def map between T4 and B0 for
    vars B0 and B0;
  enddef;
  def map between T4 and model_parameters for
    vars k7 and k7;
    vars k_7 and k_7;
    vars k10 and k10;
    vars ky and ky;
    vars kb and kb;
  enddef;
  def map between T2p and LT2p for
    vars LT2p and LT2p;
    vars T2p and T2p;
  enddef;
  def map between T2p and T2pR for
    vars T2pR and T2pR;
    vars T2p and T2p;
  enddef;
  def map between T2p and R for
    vars R and R;
  enddef;
  def map between T2p and T3p for
    vars T3p and T3p;
  enddef;
  def map between T2p and L for
    vars L and L;
  enddef;
  def map between T2p and Bp for
    vars Bp and Bp;
  enddef;
  def map between T2p and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between T2p and Yp for
    vars Yp and Yp;
  enddef;
  def map between T2p and B0 for
    vars B0 and B0;
  enddef;
  def map between T2p and model_parameters for
    vars k5 and k5;
    vars k_5 and k_5;
    vars k8 and k8;
    vars k_1 and k_1;
    vars ky and ky;
    vars kb and kb;
    vars k1a and k1a;
    vars k1b and k1b;
    vars k1c and k1c;
  enddef;
  def map between T3p and LT3p for
    vars LT3p and LT3p;
    vars T3p and T3p;
  enddef;
  def map between T3p and T3pR for
    vars T3pR and T3pR;
    vars T3p and T3p;
  enddef;
  def map between T3p and R for
    vars R and R;
  enddef;
  def map between T3p and T4p for
    vars T4p and T4p;
  enddef;
  def map between T3p and L for
    vars L and L;
  enddef;
  def map between T3p and Bp for
    vars Bp and Bp;
  enddef;
  def map between T3p and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between T3p and Yp for
    vars Yp and Yp;
  enddef;
  def map between T3p and B0 for
    vars B0 and B0;
  enddef;
  def map between T3p and model_parameters for
    vars k6 and k6;
    vars k_6 and k_6;
    vars k9 and k9;
    vars k_2 and k_2;
    vars ky and ky;
    vars kb and kb;
    vars k2a and k2a;
    vars k2b and k2b;
    vars k2c and k2c;
  enddef;
  def map between T4p and LT4p for
    vars LT4p and LT4p;
    vars T4p and T4p;
  enddef;
  def map between T4p and L for
    vars L and L;
  enddef;
  def map between T4p and Bp for
    vars Bp and Bp;
  enddef;
  def map between T4p and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between T4p and Yp for
    vars Yp and Yp;
  enddef;
  def map between T4p and B0 for
    vars B0 and B0;
  enddef;
  def map between T4p and model_parameters for
    vars k7 and k7;
    vars k_7 and k_7;
    vars k10 and k10;
    vars ky and ky;
    vars kb and kb;
  enddef;
  def map between LT2 and LT2R for
    vars LT2R and LT2R;
    vars LT2 and LT2;
  enddef;
  def map between LT2 and R for
    vars R and R;
  enddef;
  def map between LT2 and LT3 for
    vars LT3 and LT3;
  enddef;
  def map between LT2 and L for
    vars L and L;
  enddef;
  def map between LT2 and Bp for
    vars Bp and Bp;
  enddef;
  def map between LT2 and LT2p for
    vars LT2p and LT2p;
    vars LT2 and LT2;
  enddef;
  def map between LT2 and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between LT2 and Yp for
    vars Yp and Yp;
  enddef;
  def map between LT2 and B0 for
    vars B0 and B0;
  enddef;
  def map between LT2 and model_parameters for
    vars k5 and k5;
    vars k_5 and k_5;
    vars k11 and k11;
    vars k_3 and k_3;
    vars ky and ky;
    vars kb and kb;
    vars k3a and k3a;
    vars k3b and k3b;
    vars k3c and k3c;
  enddef;
  def map between LT3 and LT3R for
    vars LT3R and LT3R;
    vars LT3 and LT3;
  enddef;
  def map between LT3 and R for
    vars R and R;
  enddef;
  def map between LT3 and LT4 for
    vars LT4 and LT4;
  enddef;
  def map between LT3 and L for
    vars L and L;
  enddef;
  def map between LT3 and Bp for
    vars Bp and Bp;
  enddef;
  def map between LT3 and LT3p for
    vars LT3p and LT3p;
    vars LT3 and LT3;
  enddef;
  def map between LT3 and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between LT3 and Yp for
    vars Yp and Yp;
  enddef;
  def map between LT3 and B0 for
    vars B0 and B0;
  enddef;
  def map between LT3 and model_parameters for
    vars k6 and k6;
    vars k_6 and k_6;
    vars k12 and k12;
    vars k_4 and k_4;
    vars ky and ky;
    vars kb and kb;
    vars k4a and k4a;
    vars k4b and k4b;
    vars k4c and k4c;
  enddef;
  def map between LT4 and L for
    vars L and L;
  enddef;
  def map between LT4 and Bp for
    vars Bp and Bp;
  enddef;
  def map between LT4 and LT4p for
    vars LT4p and LT4p;
    vars LT4 and LT4;
  enddef;
  def map between LT4 and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between LT4 and Yp for
    vars Yp and Yp;
  enddef;
  def map between LT4 and B0 for
    vars B0 and B0;
  enddef;
  def map between LT4 and model_parameters for
    vars k7 and k7;
    vars k_7 and k_7;
    vars k13 and k13;
    vars ky and ky;
    vars kb and kb;
  enddef;
  def map between LT2p and LT2pR for
    vars LT2pR and LT2pR;
    vars LT2p and LT2p;
  enddef;
  def map between LT2p and R for
    vars R and R;
  enddef;
  def map between LT2p and LT3p for
    vars LT3p and LT3p;
  enddef;
  def map between LT2p and L for
    vars L and L;
  enddef;
  def map between LT2p and Bp for
    vars Bp and Bp;
  enddef;
  def map between LT2p and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between LT2p and Yp for
    vars Yp and Yp;
  enddef;
  def map between LT2p and B0 for
    vars B0 and B0;
  enddef;
  def map between LT2p and model_parameters for
    vars k5 and k5;
    vars k_5 and k_5;
    vars k11 and k11;
    vars k_3 and k_3;
    vars ky and ky;
    vars kb and kb;
    vars k3a and k3a;
    vars k3b and k3b;
    vars k3c and k3c;
  enddef;
  def map between LT3p and LT3pR for
    vars LT3pR and LT3pR;
    vars LT3p and LT3p;
  enddef;
  def map between LT3p and R for
    vars R and R;
  enddef;
  def map between LT3p and LT4p for
    vars LT4p and LT4p;
  enddef;
  def map between LT3p and L for
    vars L and L;
  enddef;
  def map between LT3p and Bp for
    vars Bp and Bp;
  enddef;
  def map between LT3p and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between LT3p and Yp for
    vars Yp and Yp;
  enddef;
  def map between LT3p and B0 for
    vars B0 and B0;
  enddef;
  def map between LT3p and model_parameters for
    vars k6 and k6;
    vars k_6 and k_6;
    vars k12 and k12;
    vars k_4 and k_4;
    vars ky and ky;
    vars kb and kb;
    vars k4a and k4a;
    vars k4b and k4b;
    vars k4c and k4c;
  enddef;
  def map between LT4p and L for
    vars L and L;
  enddef;
  def map between LT4p and Bp for
    vars Bp and Bp;
  enddef;
  def map between LT4p and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between LT4p and Yp for
    vars Yp and Yp;
  enddef;
  def map between LT4p and B0 for
    vars B0 and B0;
  enddef;
  def map between LT4p and model_parameters for
    vars k7 and k7;
    vars k_7 and k_7;
    vars k13 and k13;
    vars ky and ky;
    vars kb and kb;
  enddef;
  def map between Yp and P for
    vars P and P;
  enddef;
  def map between Yp and Z for
    vars Z and Z;
  enddef;
  def map between Yp and Y0 for
    vars Y0 and Y0;
  enddef;
  def map between Yp and model_parameters for
    vars ky and ky;
    vars k_y and k_y;
  enddef;
  def map between Bp and P for
    vars P and P;
  enddef;
  def map between Bp and B0 for
    vars B0 and B0;
  enddef;
  def map between Bp and model_parameters for
    vars kb and kb;
    vars k_b and k_b;
  enddef;
  def map between P and T2p for
    vars T2p and T2p;
  enddef;
  def map between P and LT2p for
    vars LT2p and LT2p;
  enddef;
  def map between P and T3p for
    vars T3p and T3p;
  enddef;
  def map between P and LT3p for
    vars LT3p and LT3p;
  enddef;
  def map between P and T4p for
    vars T4p and T4p;
  enddef;
  def map between P and LT4p for
    vars LT4p and LT4p;
  enddef;
  def map between T2R and R for
    vars R and R;
  enddef;
  def map between T3R and R for
    vars R and R;
  enddef;
  def map between T2pR and R for
    vars R and R;
  enddef;
  def map between T3pR and R for
    vars R and R;
  enddef;
  def map between LT2R and R for
    vars R and R;
  enddef;
  def map between LT3R and R for
    vars R and R;
  enddef;
  def map between LT2pR and R for
    vars R and R;
  enddef;
  def map between LT3pR and R for
    vars R and R;
  enddef;
  def map between T2R and model_parameters for
    vars k1a and k1a;
    vars k1b and k1b;
    vars k1c and k1c;
  enddef;
  def map between T3R and model_parameters for
    vars k2a and k2a;
    vars k2b and k2b;
    vars k2c and k2c;
  enddef;
  def map between T2pR and model_parameters for
    vars k1a and k1a;
    vars k1b and k1b;
    vars k1c and k1c;
  enddef;
  def map between T3pR and model_parameters for
    vars k2a and k2a;
    vars k2b and k2b;
    vars k2c and k2c;
  enddef;
  def map between LT2R and model_parameters for
    vars k3a and k3a;
    vars k3b and k3b;
    vars k3c and k3c;
  enddef;
  def map between LT3R and model_parameters for
    vars k4a and k4a;
    vars k4b and k4b;
    vars k4c and k4c;
  enddef;
  def map between LT2pR and model_parameters for
    vars k3a and k3a;
    vars k3b and k3b;
    vars k3c and k3c;
  enddef;
  def map between LT3pR and model_parameters for
    vars k4a and k4a;
    vars k4b and k4b;
    vars k4c and k4c;
  enddef;
enddef;
