//   FILE :  boyett_SAN_model_2001.xml
//
// CREATED :  28th January 2002
//
// LAST MODIFIED : 20th April 2005
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Boyett et al's 2001
// mathematical model of control of the pacemaker activity of the sinoatrial node.
//
// CHANGES:
//   25/02/2002 - CML - Corrected several equations.
//   19/07/2002 - CML - Added more metadata.
//   20/04/2005 - PJV - Updated syntax to conform with cellml 1.1 specs
def model boyett_2001 as
  // Modelling The Effect Of Intracellular Ca2+ On Sinoatrial Node Action Potentials, 2001
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model is valid CellML. However the model will not run in either OpenCell or COR and the model requires further curation.
  //
  // Model Structure
  //
  // ABSTRACT: The possible effects of intracellular Ca2+ on the pacemaker of the heart, the sinoatrial node, are reviewed. In mammalian sinoatrial node, reduction or abolition of the intracellular Ca2+ transient by ryanodine, sarcoplasmic reticulum Ca2+ pump block or 1,2-bis(2-aminophenoxy)ethane-N, N, N', N'-tetraacetic acid (BAPTA) reduces the spontaneous rate by 21-32%, whereas in amphibian sinus venosus it abolishes spontaneous activity. In rabbit sinoatrial node, ryanodine/BAPTA reduces the T-type Ca2+ current (iCa,T), perhaps slows inactivation of the L-type Ca2+ current (iCa,L), reduces the inward Na+-Ca2+ exchange current (iNaCa), and reduces the rapid and slow delayed rectifier K+ currents (iK,r and iK,s, respectively). Other evidence shows that a reduction of intracellular Ca2+ inhibits the hyperpolarization-activated current (if). These putative intracellular Ca2+-dependent changes in ionic currents have been incorporated into different models of rabbit sinoatrial node action potentials. In the models, block of the Ca2+ transient reduced the spontaneous rate by 24 and 26% in the central and peripheral models of Zhang and others, 13% in the Oxsoft model (Noble et al.), 9% in the model of Wilders and others, and 41% in the model of Demir and others. In all models, the reduction in rate was not primarily the result of the decrease in iNaCa, but instead the combination of all changes in ionic currents.
  //
  // The original paper reference is cited below:
  //
  // Control of the pacemaker activity of the sinoatrial node by intracellular Ca2+. Experiments and modelling, M.R. Boyett, H. Zhang, A. Garny and A.V. Holden, 2001, Phil. Trans. R. Soc. Lond. A., 359, 1091-1110. (note there is no PubMed ID for this publication).
  //
  // cell diagram of the Boyett et al SAN model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the Boyett et al 2001 model of the action potentials in the peripheral cells of the SA node.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit microlitre_per_second as
    unit litre {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit millimole_per_second as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_second_millimolar as
    unit second {expo: -1};
    unit millimolar {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0042391
  def comp membrane as
    var dCell: dimensionless {init: 0, pub: out};
    var FCell: dimensionless {pub: out};
    var V: millivolt {init: -39.013558536, pub: out};
    var R: millijoule_per_mole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96845, pub: out};
    var Cm: microF;
    var CmCentre: microF {init: 2e-5};
    var CmPeriphery: microF {init: 6.5e-5};
    var time: second {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_T: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_sus: nanoA {pub: in};
    var i_K_r: nanoA {pub: in};
    var i_K_s: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_f_Na: nanoA {pub: in};
    var i_f_K: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_b_Na: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_b_Ca: nanoA {pub: in};
    var i_b_K: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_p: nanoA {pub: in};
    var i_Ca_P: nanoA {pub: in};
    var i_st: nanoA {pub: in};
    FCell = 1.07{dimensionless}*(3{dimensionless}*dCell-0.1{dimensionless})/(3{dimensionless}*(1{dimensionless}+0.7745{dimensionless}*exp(-(3{dimensionless}*dCell-2.05{dimensionless})/0.295{dimensionless})));
    Cm = CmCentre+FCell*(CmPeriphery-CmCentre);
    ode(V, time) = -1{dimensionless}/Cm*(i_Na+i_Ca_L+i_Ca_T+i_to+i_sus+i_K_r+i_K_s+i_f_Na+i_f_K+i_b_Na+i_b_Ca+i_b_K+i_NaCa+i_p+i_Ca_P);
  enddef;

  def comp sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_Na: microlitre_per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_Na_Centre: microlitre_per_second {init: 0};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_Na_Periphery: microlitre_per_second {init: 1.2e-6};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var Na_o: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    g_Na = g_Na_Centre+FCell*(g_Na_Periphery-g_Na_Centre);
    i_Na = g_Na*pow(m, 3{dimensionless})*h*Na_o*sqr(F)/(R*T)*(exp((V-E_Na)*F/(R*T))-1{dimensionless})/(exp(V*F/(R*T))-1{dimensionless})*V;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp sodium_current_m_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {init: 0.092361701692, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var tau_m: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(m, time) = (m_infinity-m)/tau_m;
    m_infinity = pow(1{dimensionless}/(1{dimensionless}+exp(-V/5.46{millivolt})), 1{dimensionless}/3{dimensionless});
    tau_m = 0.0006247{second}/(0.832{dimensionless}*exp(-0.335{per_millivolt}*(V+56.7{millivolt}))+0.627{dimensionless}*exp(0.082{per_millivolt}*(V+65.01{millivolt})))+4e-5{second};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp sodium_current_h_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var F_Na: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h1: dimensionless {init: 0.015905380261};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h2: dimensionless {init: 0.01445216109};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h1_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h2_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var tau_h1: second;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var tau_h2: second;
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var V: millivolt {pub: in};
    var time: second {pub: in};
    F_Na = 0.0952{dimensionless}*exp(-0.063{per_millivolt}*(V+34.4{millivolt}))/(1{dimensionless}+1.66{dimensionless}*exp(-0.225{per_millivolt}*(V+63.7{millivolt})))+0.0869{dimensionless};
    h = (1{dimensionless}-F_Na)*h1+F_Na*h2;
    ode(h1, time) = (h1_infinity-h1)/tau_h1;
    ode(h2, time) = (h2_infinity-h2)/tau_h2;
    h1_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+66.1{millivolt})/6.4{millivolt}));
    h2_infinity = h1_infinity;
    tau_h1 = 3.717e-6{second}*exp(-0.2815{per_millivolt}*(V+17.11{millivolt}))/(1{dimensionless}+0.003732{dimensionless}*exp(-0.3426{per_millivolt}*(V+37.76{millivolt})))+0.0005977{second};
    tau_h2 = 3.186e-8{second}*exp(-0.6219{per_millivolt}*(V+18.8{millivolt}))/(1{dimensionless}+7.189e-5{dimensionless}*exp(-0.6683{per_millivolt}*(V+34.07{millivolt})))+0.003556{second};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var FCell: dimensionless {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g_Ca_L_Centre: microS {init: 0.0058};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g_Ca_L_Periphery: microS {init: 0.0659};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g_Ca_L: microS;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var E_Ca_L: millivolt {init: 46.4};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d_L: dimensionless {priv: in};
    var f_L: dimensionless {priv: in};
    g_Ca_L = g_Ca_L_Centre+FCell*(g_Ca_L_Periphery-g_Ca_L_Centre);
    i_Ca_L = g_Ca_L*(f_L*d_L+0.006{dimensionless}/(1{dimensionless}+exp(-(V+14.1{millivolt})/6{millivolt})))*(V-E_Ca_L);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_d_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var d_L: dimensionless {init: 0.04804900895, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var alpha_d_L: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var beta_d_L: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var d_L_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_d_L: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(d_L, time) = (d_L_infinity-d_L)/tau_d_L;
    alpha_d_L = -28.38{per_millivolt_second}*(V+35{millivolt})/(exp(-(V+35{millivolt})/2.5{millivolt})-1{dimensionless})-84.9{per_millivolt_second}*V/(exp(-0.208{per_millivolt}*V)-1{dimensionless});
    beta_d_L = 11.42{per_millivolt_second}*(V-5{millivolt})/(exp(0.4{per_millivolt}*(V-5{millivolt}))-1{dimensionless});
    tau_d_L = 2{dimensionless}/(alpha_d_L+beta_d_L);
    d_L_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+23.1{millivolt})/6{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_f_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var f_L: dimensionless {init: 0.48779845203, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var alpha_f_L: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var beta_f_L: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var f_L_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_f_L: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f_L, time) = (f_L_infinity-f_L)/tau_f_L;
    alpha_f_L = 3.12{per_millivolt_second}*(V+28{millivolt})/(exp((V+28{millivolt})/4{millivolt})-1{dimensionless});
    beta_f_L = 25{per_second}/(1{dimensionless}+exp(-(V+28{millivolt})/4{millivolt}));
    tau_f_L = 1{dimensionless}/(alpha_f_L+beta_f_L);
    f_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45{millivolt})/5{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var FCell: dimensionless {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_T: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g_Ca_T_Centre: microS {init: 0.0043};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g_Ca_T_Periphery: microS {init: 0.0139};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var g_Ca_T: microS;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var E_Ca_T: millivolt {init: 45};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var d_T: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var f_T: dimensionless {priv: in};
    g_Ca_T = g_Ca_T_Centre+FCell*(g_Ca_T_Periphery-g_Ca_T_Centre);
    i_Ca_T = g_Ca_T*d_T*f_T*(V-E_Ca_T);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel_d_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var d_T: dimensionless {init: 0.42074047435, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var alpha_d_T: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var beta_d_T: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var d_T_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_d_T: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(d_T, time) = (d_T_infinity-d_T)/tau_d_T;
    alpha_d_T = 1068{per_second}*exp((V+26.3{millivolt})/30{millivolt});
    beta_d_T = 1068{per_second}*exp(-(V+26.3{millivolt})/30{millivolt});
    tau_d_T = 1{dimensionless}/(alpha_d_T+beta_d_T);
    d_T_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+37{millivolt})/6.8{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp T_type_Ca_channel_f_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var f_T: dimensionless {init: 0.038968420558, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var alpha_f_T: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var beta_f_T: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var f_T_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_f_T: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f_T, time) = (f_T_infinity-f_T)/tau_f_T;
    alpha_f_T = 15.3{per_second}*exp(-(V+71.7{millivolt})/83.3{millivolt});
    beta_f_T = 15{per_second}*exp((V+71.7{millivolt})/15.38{millivolt});
    tau_f_T = 1{dimensionless}/(alpha_f_T+beta_f_T);
    f_T_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+71{millivolt})/9{millivolt}));
  enddef;

  def comp four_AP_sensitive_currents as
    var FCell: dimensionless {priv: out, pub: in};
    var i_to: nanoA {pub: out};
    var i_sus: nanoA {pub: out};
    var g_to_Centre: microS {init: 0.00491};
    var g_to_Periphery: microS {init: 0.03649};
    var g_to: microS;
    var g_sus_Centre: microS {init: 6.65e-5};
    var g_sus_Periphery: microS {init: 0.0114};
    var g_sus: microS;
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: second {priv: out, pub: in};
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    g_to = g_to_Centre+FCell*(g_to_Periphery-g_to_Centre);
    g_sus = g_sus_Centre+FCell*(g_sus_Periphery-g_sus_Centre);
    i_to = g_to*q*r*(V-E_K);
    i_sus = g_sus*r*(V-E_K);
  enddef;

  def comp four_AP_sensitive_currents_q_gate as
    var FCell: dimensionless {pub: in};
    var q: dimensionless {init: 0.29760539675, pub: out};
    var q_infinity: dimensionless;
    var tau_q: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(q, time) = (q_infinity-q)/tau_q;
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+59.37{millivolt})/13.1{millivolt}));
    tau_q = 0.0101{second}+0.06517{second}/(0.57{dimensionless}*exp(-0.08{per_millivolt}*(V+49{millivolt})))+2.4e-5{second}*exp(0.1{per_millivolt}*(V+50.93{millivolt}));
  enddef;

  def comp four_AP_sensitive_currents_r_gate as
    var r: dimensionless {init: 0.064402950262, pub: out};
    var r_infinity: dimensionless;
    var tau_r: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = (r_infinity-r)/tau_r;
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-10.93{millivolt})/19.7{millivolt}));
    tau_r = 0.001{dimensionless}*(2.98{second}+15.59{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt}))));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_delayed_rectifying_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_K_r: nanoA {pub: out};
    var g_K_r_Centre: microS {init: 0.000797};
    var g_K_r_Periphery: microS {init: 0.016};
    var g_K_r: microS;
    var P_a: dimensionless;
    var E_K: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var P_af: dimensionless {priv: in};
    var P_as: dimensionless {priv: in};
    var P_i: dimensionless {priv: in};
    g_K_r = g_K_r_Centre+FCell*(g_K_r_Periphery-g_K_r_Centre);
    i_K_r = g_K_r*P_a*P_i*(V-E_K);
    P_a = 0.6{dimensionless}*P_af+0.4{dimensionless}*P_as;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_delayed_rectifying_potassium_current_P_af_gate as
    var P_af: dimensionless {init: 0.13034201158, pub: out};
    var P_af_infinity: dimensionless {pub: out};
    var tau_P_af: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(P_af, time) = (P_af_infinity-P_af)/tau_P_af;
    P_af_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+14.2{millivolt})/10.6{millivolt}));
    tau_P_af = 1{second}/(37.2{dimensionless}*exp((V-9{millivolt})/15.9{millivolt})+0.96{dimensionless}*exp(-(V-9{millivolt})/22.5{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_delayed_rectifying_potassium_current_P_as_gate as
    var P_as: dimensionless {init: 0.46960956028, pub: out};
    var P_as_infinity: dimensionless;
    var tau_P_as: second;
    var P_af_infinity: dimensionless {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(P_as, time) = (P_as_infinity-P_as)/tau_P_as;
    P_as_infinity = P_af_infinity;
    tau_P_as = 1{second}/(4.2{dimensionless}*exp((V-9{millivolt})/17{millivolt})+0.15{dimensionless}*exp(-(V-9{millivolt})/21.6{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_delayed_rectifying_potassium_current_P_i_gate as
    var P_i: dimensionless {init: 0.87993375273, pub: out};
    var P_i_infinity: dimensionless;
    var tau_P_i: second {init: 0.002};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(P_i, time) = (P_i_infinity-P_i)/tau_P_i;
    P_i_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+18.6{millivolt})/10.1{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp slow_delayed_rectifying_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_K_s: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_K_s_Centre: microS {init: 0.000518};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_K_s_Periphery: microS {init: 0.0104};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_K_s: microS;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_K_s: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var xs: dimensionless {priv: in};
    g_K_s = g_K_s_Centre+FCell*(g_K_s_Periphery-g_K_s_Centre);
    i_K_s = g_K_s*sqr(xs)*(V-E_K_s);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp slow_delayed_rectifying_potassium_current_xs_gate as
    var xs: dimensionless {init: 0.082293827208, pub: out};
    var alpha_xs: per_second;
    var beta_xs: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(xs, time) = alpha_xs*(1{dimensionless}-xs)-beta_xs*xs;
    alpha_xs = 14{per_second}/(1{dimensionless}+exp(-(V-40{millivolt})/9{millivolt}));
    beta_xs = 1{per_second}*exp(-V/45{millivolt});
  enddef;

  def comp hyperpolarisation_activated_current as
    var FCell: dimensionless {pub: in};
    var i_f_Na: nanoA {pub: out};
    var i_f_K: nanoA {pub: out};
    var g_f_Na_Centre: microS {init: 0.000548};
    var g_f_Na_Periphery: microS {init: 0.0069};
    var g_f_Na: microS;
    var g_f_K_Centre: microS {init: 0.000548};
    var g_f_K_Periphery: microS {init: 0.0069};
    var g_f_K: microS;
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var y: dimensionless {priv: in};
    g_f_Na = g_f_Na_Centre+FCell*(g_f_Na_Periphery-g_f_Na_Centre);
    i_f_Na = g_f_Na*y*(V-E_Na);
    g_f_K = g_f_K_Centre+FCell*(g_f_K_Periphery-g_f_K_Centre);
    i_f_K = g_f_K*y*(V-E_K);
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var y: dimensionless {init: 0.03889291759, pub: out};
    var alpha_y: per_second;
    var beta_y: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
    alpha_y = 1{per_second}*exp(-(V+78.91{millivolt})/26.62{millivolt});
    beta_y = 1{per_second}*exp((V+75.13{millivolt})/21.25{millivolt});
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp sodium_background_current as
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_b_Na: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_b_Na_Centre: microS {init: 5.8e-5};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_b_Na_Periphery: microS {init: 0.000189};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_b_Na: microS;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var E_Na: millivolt {pub: in};
    var V: millivolt {pub: in};
    g_b_Na = g_b_Na_Centre+FCell*(g_b_Na_Periphery-g_b_Na_Centre);
    i_b_Na = g_b_Na*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  def comp potassium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_b_K: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var g_b_K_Centre: microS {init: 2.52e-5};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var g_b_K_Periphery: microS {init: 8.19e-5};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var g_b_K: microS;
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    g_b_K = g_b_K_Centre+FCell*(g_b_K_Periphery-g_b_K_Centre);
    i_b_K = g_b_K*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp calcium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_b_Ca: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_b_Ca_Centre: microS {init: 1.32e-5};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_b_Ca_Periphery: microS {init: 4.3e-5};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_b_Ca: microS;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var E_Ca: millivolt {pub: in};
    var V: millivolt {pub: in};
    g_b_Ca = g_b_Ca_Centre+FCell*(g_b_Ca_Periphery-g_b_Ca_Centre);
    i_b_Ca = g_b_Ca*(V-E_Ca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp sodium_calcium_exchanger as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var FCell: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var k_NaCa_Centre: nanoA {init: 2.7e-6};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var k_NaCa_Periphery: nanoA {init: 8.8e-6};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var k_NaCa: nanoA;
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var d_NaCa: dimensionless {init: 0.0001};
    var gamma_NaCa: dimensionless {init: 0.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    k_NaCa = k_NaCa_Centre+FCell*(k_NaCa_Periphery-k_NaCa_Centre);
    i_NaCa = k_NaCa*(pow(Na_i, 3{dimensionless})*Ca_o*exp(0.03743{per_millivolt}*V*gamma_NaCa)-pow(Na_o, 3{dimensionless})*Ca_i*exp(0.0374{per_millivolt}*V*(gamma_NaCa-1{dimensionless})))/(1{millimolar4}+d_NaCa*(Ca_i*pow(Na_o, 3{dimensionless})+Ca_o*pow(Na_i, 3{dimensionless})));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005391
  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0006815
  def comp sodium_potassium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    var FCell: dimensionless {pub: in};
    var i_p: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var K_m_Na: millimolar {init: 5.64};
    var K_m_K: millimolar {init: 0.621};
    var i_p_max_Centre: nanoA {init: 0.0478};
    var i_p_max_Periphery: nanoA {init: 0.16};
    var i_p_max: nanoA;
    var Na_i: millimolar {pub: in};
    var K_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    i_p_max = i_p_max_Centre+FCell*(i_p_max_Periphery-i_p_max_Centre);
    i_p = i_p_max*pow(Na_i/(K_m_Na+Na_i), 3{dimensionless})*sqr(K_o/(K_m_K+K_o))*1.6{dimensionless}/(1.5{dimensionless}+exp(-(V+60{millivolt})/40{millivolt}));
  enddef;

  def comp ionic_concentrations as
    var Na_i: millimolar {init: 8, pub: out};
    var Na_o: millimolar {init: 140, pub: out};
    var Ca_i: millimolar {init: 0.0001, pub: out};
    var Ca_o: millimolar {init: 2, pub: out};
    var K_i: millimolar {init: 140, pub: out};
    var K_o: millimolar {init: 5.4, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp reversal_and_equilibrium_potentials as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_K_s: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var E_Ca: millivolt {pub: out};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    E_K_s = R*T/F*ln((K_o+0.12{dimensionless}*Na_o)/(K_i+0.12{dimensionless}*Na_i));
  enddef;

  def comp sustained_inward_current as
    var i_st: nanoA {pub: out};
    var g_st: microS {init: 0.00214};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d_s: dimensionless {priv: in};
    var f_s: dimensionless {priv: in};
    i_st = g_st*d_s*f_s*(V-18.0{millivolt});
  enddef;

  def comp sustained_inward_current_d_gate as
    var d_s: dimensionless {init: 0.230, pub: out};
    var alpha_d_s: per_second;
    var beta_d_s: per_second;
    var d_s_infinity: dimensionless;
    var tau_d_s: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(d_s, time) = (d_s_infinity-d_s)/tau_d_s;
    alpha_d_s = 1000.0{per_second}/(0.15{dimensionless}*exp(-V/11.0{millivolt})+0.2{dimensionless}*exp(-V/700.0{millivolt}));
    beta_d_s = 1000.0{per_second}/(16.0{dimensionless}*exp(V/8.0{millivolt})+0.2{dimensionless}*exp(V/50.0{millivolt}));
    tau_d_s = 1.0{dimensionless}/(alpha_d_s+beta_d_s);
    d_s_infinity = alpha_d_s/(alpha_d_s+beta_d_s);
  enddef;

  def comp sustained_inward_current_f_gate as
    var f_s: dimensionless {init: 0.283, pub: out};
    var alpha_f_s: per_second;
    var beta_f_s: per_second;
    var f_s_infinity: dimensionless;
    var tau_f_s: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f_s, time) = (f_s_infinity-f_s)/tau_f_s;
    alpha_f_s = 1000.0{per_second}/(3100.0{dimensionless}*exp(-V/13.0{millivolt})+700.0{dimensionless}*exp(-V/70.0{millivolt}));
    beta_f_s = 1000.0{per_second}/(16.0{dimensionless}*exp(V/8.0{millivolt})+0.2{dimensionless}*exp(V/50.0{millivolt}));
    tau_f_s = 1.0{dimensionless}/(alpha_f_s+beta_f_s);
    f_s_infinity = alpha_f_s/(alpha_f_s+beta_f_s);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp intracellular_calcium_handling as
    var i_Ca_P: nanoA {pub: out};
    var U_d: dimensionless;
    var U_s: dimensionless;
    var i_Ca_P_max: nanoA {init: 0.24};
    var J_Ca_ds: millimole_per_second;
    var J_Ca_r: millimole_per_second;
    var J_Ca_P: millimole_per_second;
    var J_Ca_P_max: millimole_per_second {init: 0.00000000096};
    var J_Ca_u: millimole_per_second;
    var J_Ca_u_max: millimole_per_second {init: 0.00000000096};
    var J_Ca_ur: millimole_per_second;
    var J_Ca_1: millimole_per_second;
    var Ca_d: millimolar {init: 0.001544};
    var Ca_s: millimolar {init: 0.05487};
    var Ca_u: millimolar {init: 6.983};
    var Ca_r: millimolar {init: 4.909};
    var B_d: millimolar {init: 0.4};
    var B_s: millimolar {init: 0.2};
    var Vol_u: litre;
    var Vol_r: litre;
    var Vol_d: litre;
    var Vol_s: litre;
    var Vol_c: litre {init: 8.0e-12};
    var K_m_b: millimolar {init: 0.002};
    var K_m_r: millimolar {init: 0.001};
    var K_m_u: millimolar {init: 0.005};
    var f_d: dimensionless {init: 0.1};
    var f_r: dimensionless {init: 0.3};
    var f_u: dimensionless {init: 0.06};
    var alpha_ds: per_second {init: 3300.0};
    var alpha_fR: per_second_millimolar {init: 6670.0};
    var alpha_1: per_second {init: 0.172};
    var alpha_r: per_second {init: 333.5};
    var alpha_ur: per_second {init: 533.6};
    var beta_fR: per_second {init: 2.0};
    var f_R: dimensionless {init: 0.188};
    var i_Ca: nanoA;
    var i_Ca_L: nanoA {pub: in};
    var i_Ca_T: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    U_d = 1.0{dimensionless}-B_d/(K_m_b+Ca_d+B_d);
    J_Ca_ds = alpha_ds*Vol_d*(Ca_d-Ca_s);
    i_Ca_P = i_Ca_P_max*(Ca_s/(Ca_s+0.0004{millimolar}));
    J_Ca_r = alpha_r*f_R*(sqr(Ca_d)/(sqr(K_m_r)+sqr(Ca_d)))*Vol_r*Ca_r;
    ode(f_R, time) = -alpha_fR*Ca_d*f_R+beta_fR*(1.0{dimensionless}-f_R);
    U_s = 1.0{dimensionless}-B_s/(K_m_b+Ca_s+B_s);
    J_Ca_P = J_Ca_P_max*(Ca_s/(Ca_s+0.0004{millimolar}));
    J_Ca_u = J_Ca_u_max*(sqr(Ca_s)/(sqr(K_m_u)+sqr(Ca_s)));
    J_Ca_ur = alpha_ur*Vol_u*(Ca_u-Ca_r);
    J_Ca_1 = alpha_1*Vol_u*Ca_u;
    i_Ca = i_Ca_L+i_Ca_T;
    ode(Ca_d, time) = U_d/Vol_d*(J_Ca_ds-0.95{dimensionless}*i_Ca/(2.0{dimensionless}*F));
    ode(Ca_s, time) = U_s/Vol_s*(J_Ca_ds-((0.05{dimensionless}*i_Ca-2.0{dimensionless}*i_NaCa+i_b_Ca)/(2.0{dimensionless}*F)+J_Ca_u)+J_Ca_r+J_Ca_1);
    ode(Ca_u, time) = (J_Ca_u-(J_Ca_1+J_Ca_ur))/Vol_u;
    ode(Ca_r, time) = (J_Ca_ur-J_Ca_r)/Vol_r;
    Vol_u = f_u*Vol_c;
    Vol_r = f_r*Vol_c;
    Vol_d = f_d*Vol_c;
    Vol_s = Vol_c-(Vol_u+Vol_d);
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_d_gate;
      comp T_type_Ca_channel_f_gate;
    endcomp;
    comp four_AP_sensitive_currents incl
      comp four_AP_sensitive_currents_q_gate;
      comp four_AP_sensitive_currents_r_gate;
    endcomp;
    comp rapid_delayed_rectifying_potassium_current incl
      comp rapid_delayed_rectifying_potassium_current_P_af_gate;
      comp rapid_delayed_rectifying_potassium_current_P_as_gate;
      comp rapid_delayed_rectifying_potassium_current_P_i_gate;
    endcomp;
    comp slow_delayed_rectifying_potassium_current incl
      comp slow_delayed_rectifying_potassium_current_xs_gate;
    endcomp;
    comp hyperpolarisation_activated_current incl
      comp hyperpolarisation_activated_current_y_gate;
    endcomp;
    comp sustained_inward_current incl
      comp sustained_inward_current_d_gate;
      comp sustained_inward_current_f_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between four_AP_sensitive_currents and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifying_potassium_current and environment for
    vars time and time;
  enddef;
  def map between hyperpolarisation_activated_current and environment for
    vars time and time;
  enddef;
  def map between sustained_inward_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_handling and environment for
    vars time and time;
  enddef;
  def map between membrane and sodium_current for
    vars FCell and FCell;
    vars i_Na and i_Na;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars FCell and FCell;
    vars i_Ca_L and i_Ca_L;
    vars V and V;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars FCell and FCell;
    vars i_Ca_T and i_Ca_T;
    vars V and V;
  enddef;
  def map between membrane and four_AP_sensitive_currents for
    vars FCell and FCell;
    vars i_to and i_to;
    vars i_sus and i_sus;
    vars V and V;
  enddef;
  def map between membrane and rapid_delayed_rectifying_potassium_current for
    vars FCell and FCell;
    vars i_K_r and i_K_r;
    vars V and V;
  enddef;
  def map between membrane and slow_delayed_rectifying_potassium_current for
    vars FCell and FCell;
    vars i_K_s and i_K_s;
    vars V and V;
  enddef;
  def map between membrane and hyperpolarisation_activated_current for
    vars FCell and FCell;
    vars i_f_Na and i_f_Na;
    vars i_f_K and i_f_K;
    vars V and V;
  enddef;
  def map between membrane and sodium_background_current for
    vars FCell and FCell;
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and potassium_background_current for
    vars FCell and FCell;
    vars V and V;
    vars i_b_K and i_b_K;
  enddef;
  def map between membrane and calcium_background_current for
    vars FCell and FCell;
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars FCell and FCell;
    vars i_NaCa and i_NaCa;
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars FCell and FCell;
    vars i_p and i_p;
    vars V and V;
  enddef;
  def map between membrane and sustained_inward_current for
    vars i_st and i_st;
    vars V and V;
  enddef;
  def map between membrane and reversal_and_equilibrium_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and intracellular_calcium_handling for
    vars i_Ca_P and i_Ca_P;
    vars F and F;
  enddef;
  def map between intracellular_calcium_handling and calcium_background_current for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between intracellular_calcium_handling and L_type_Ca_channel for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between intracellular_calcium_handling and T_type_Ca_channel for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between intracellular_calcium_handling and sodium_calcium_exchanger for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between reversal_and_equilibrium_potentials and sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between ionic_concentrations and sodium_current for
    vars Na_o and Na_o;
  enddef;
  def map between reversal_and_equilibrium_potentials and four_AP_sensitive_currents for
    vars E_K and E_K;
  enddef;
  def map between reversal_and_equilibrium_potentials and rapid_delayed_rectifying_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_and_equilibrium_potentials and slow_delayed_rectifying_potassium_current for
    vars E_K_s and E_K_s;
  enddef;
  def map between reversal_and_equilibrium_potentials and hyperpolarisation_activated_current for
    vars E_K and E_K;
    vars E_Na and E_Na;
  enddef;
  def map between reversal_and_equilibrium_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_and_equilibrium_potentials and potassium_background_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_and_equilibrium_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between sodium_calcium_exchanger and ionic_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Na_i and Na_i;
    vars K_o and K_o;
  enddef;
  def map between reversal_and_equilibrium_potentials and ionic_concentrations for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars K_i and K_i;
    vars Na_i and Na_i;
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars FCell and FCell;
    vars d_L and d_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars FCell and FCell;
    vars f_L and f_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_d_gate for
    vars d_T and d_T;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_f_gate for
    vars FCell and FCell;
    vars f_T and f_T;
    vars time and time;
    vars V and V;
  enddef;
  def map between four_AP_sensitive_currents and four_AP_sensitive_currents_q_gate for
    vars FCell and FCell;
    vars q and q;
    vars time and time;
    vars V and V;
  enddef;
  def map between four_AP_sensitive_currents and four_AP_sensitive_currents_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current and rapid_delayed_rectifying_potassium_current_P_af_gate for
    vars P_af and P_af;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current and rapid_delayed_rectifying_potassium_current_P_as_gate for
    vars P_as and P_as;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current_P_af_gate and rapid_delayed_rectifying_potassium_current_P_as_gate for
    vars P_af_infinity and P_af_infinity;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current and rapid_delayed_rectifying_potassium_current_P_i_gate for
    vars P_i and P_i;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifying_potassium_current and slow_delayed_rectifying_potassium_current_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_inward_current and sustained_inward_current_d_gate for
    vars d_s and d_s;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_inward_current and sustained_inward_current_f_gate for
    vars f_s and f_s;
    vars time and time;
    vars V and V;
  enddef;
enddef;
// rdf:#b29b9a3e-6e5c-42a3-adb2-d15a76420329
// value: The sodium current was originally thought to be absent in SA node cells and consequently, most of the earlier models of the SA node action potential do not include i_Na. However, more recent experimental results show that i_Na is present and that it is physiologically important. The sodium channel has one activation gate m and one inactivation gate which has two components, a fast and a slow inactivation variable; h1 and h2.
// #hyperpolarisation_activated_current
// comment: i_f is a mixed current composed of both Na+ and K+ ions. In the equation to describe i_f, Zhang et al included i_f_Na and i_f_K as separate components and they also included a single activation variable y.
// #L_type_Ca_channel
// comment: The L-type calcium channel has two gates, an activation gate d_L and an inactivation gate f_L.
// #ionic_concentrations
// comment: Other SA node models have included computation of concentrations of intracellular Na+ and Ca2+. In this model, Zhang et al have assumed that all ion concentrations remain constant.
// rdf:#e7982718-8191-4340-9f32-3395a0f1d925
// value: The slow sigmoidal activation of i_K_s is modelled by squaring the gating variable xs. The i_K_s channel is also slightly permeable to Na+ ions.
// #four_AP_sensitive_currents
// comment: i_to and i_sus are respectively the transient and sustained components of the 4-Aminopyridine-sensitive current. The current has an activation variable r and and inactivation variable q.
// rdf:#e022a12b-fcc4-435a-90f4-0e3a090eb803
// value: The potassium cuurent in rabbit SA node cells can be divided into two kinetically different components, a fast cuurent i_K_r and a slow current i_K_s. Activation and inactivation of i_K_r has double-exponential time courses. To model this, Zhang et al have used two activation variables; a fast one (P_a_f) and a slow one (P_a_s). There is a single inactivation variable P_i.
// #T_type_Ca_channel
// comment: The T-type calcium channel has two gates, an activation gate d_T and an inactivation gate f_T.
// #id_00083
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00084
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00085
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00086
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00087
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00088
// isVersionOf: http://identifiers.org/go/GO:0005262
// isVersionOf: http://identifiers.org/go/GO:0034704
// isVersionOf: http://identifiers.org/go/GO:0022840
// #id_00089
// isVersionOf: http://identifiers.org/go/GO:0005245
// isVersionOf: http://identifiers.org/go/GO:0005891
// #id_00090
// isVersionOf: http://identifiers.org/go/GO:0005250
// #id_00091
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00092
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005251
// #id_00093
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00094
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00095
// isVersionOf: http://identifiers.org/go/GO:0022840
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// #id_00096
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0005251
// #id_00097
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005251
// #id_00098
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005251
// #id_00099
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// isVersionOf: http://identifiers.org/go/GO:0005251
// #id_00100
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00101
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00102
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00103
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00104
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00105
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00106
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00107
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00108
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00109
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00110
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00111
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00112
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00113
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00114
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00115
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00116
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00117
// isVersionOf: http://identifiers.org/go/GO:0022840
// #id_00118
// isVersionOf: http://identifiers.org/go/GO:0022840
// #id_00119
// isVersionOf: http://identifiers.org/go/GO:0022840
// #id_00120
// isVersionOf: http://identifiers.org/go/GO:0022840
// #id_00121
// isVersionOf: http://identifiers.org/go/GO:0022840
// #id_00122
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00123
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00124
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00125
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00126
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00127
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00128
// isVersionOf: http://identifiers.org/go/GO:0030181
// #id_00129
// isVersionOf: http://identifiers.org/chebi/CHEBI:26708
// isVersionOf: http://identifiers.org/chebi/CHEBI:39124
// isVersionOf: http://identifiers.org/chebi/CHEBI:26216
// #id_00130
// isVersionOf: http://identifiers.org/chebi/CHEBI:39124
// #id_00131
// isVersionOf: http://identifiers.org/chebi/CHEBI:39124
// #id_00132
// isVersionOf: http://identifiers.org/chebi/CHEBI:26216
// #id_00133
// isVersionOf: http://identifiers.org/chebi/CHEBI:26216
// #id_00134
// isVersionOf: http://identifiers.org/chebi/CHEBI:26708
// #id_00135
// isVersionOf: http://identifiers.org/chebi/CHEBI:26708
// #id_00136
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
// #id_00137
// isVersionOf: http://identifiers.org/go/GO:0005267
// isVersionOf: http://identifiers.org/go/GO:0034705
// isVersionOf: http://identifiers.org/go/GO:0005249
// isVersionOf: http://identifiers.org/go/GO:0008076
