// This CellML file was generated on 14/11/2007 at 19:16:31 using:
//
// COR (0.9.31.813)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
def model shannon_2004 as
  // A mathematical treatment of integrated Ca dynamics within the ventricular myocyte
  //
  // Martin Fink
  //
  // Oxford University
  //
  // Model Status
  //
  // This is the original version of this model, replete with the typographical errors contained in the publication. This model is not able to replicate the published output.
  //
  // Model Structure
  //
  // ABSTRACT: We have developed a detailed mathematical model for Ca2+ handling and ionic currents in the rabbit ventricular myocyte. The objective was to develop a model that: 1), accurately reflects Ca-dependent Ca release; 2), uses realistic parameters, particularly those that concern Ca transport from the cytosol; 3), comes to steady state; 4), simulates basic excitation-contraction coupling phenomena; and 5), runs on a normal desktop computer. The model includes the following novel features: 1), the addition of a subsarcolemmal compartment to the other two commonly formulated cytosolic compartments (junctional and bulk) because ion channels in the membrane sense ion concentrations that differ from bulk; 2), the use of realistic cytosolic Ca buffering parameters; 3), a reversible sarcoplasmic reticulum (SR) Ca pump; 4), a scheme for Na-Ca exchange transport that is [Na]i dependent and allosterically regulated by [Ca]i; and 5), a practical model of SR Ca release including both inactivation/adaptation and SR Ca load dependence. The data describe normal electrical activity and Ca handling characteristics of the cardiac myocyte and the SR Ca load dependence of these processes. The model includes a realistic balance of Ca removal mechanisms (e.g., SR Ca pump versus Na-Ca exchange), and the phenomena of rest decay and frequency-dependent inotropy. A particular emphasis is placed upon reproducing the nonlinear dependence of gain and fractional SR Ca release upon SR Ca load. We conclude that this model is more robust than many previously existing models and reproduces many experimental results using parameters based largely on experimental measurements in myocytes.
  //
  // The complete original paper reference is cited below:
  //
  // A mathematical treatment of integrated Ca dynamics within the ventricular myocyte, Thomas R. Shannon, Fei Wang, Jose Puglisi, Christopher Weber and Donald M. Bers, 2004,Biophysical Journal, 87, 3351-3371.PubMed ID: 15347581 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=15347581&dopt=Abstract)
  //
  // cell diagram
  //
  // A schematic diagram of the cell model which highlights the calcium- and sodium-dependent components of the model in particular.
  def unit thou_mill as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit centi2micro as
    unit metre {pref: micro};
    unit metre {expo: -1, pref: centi};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_millisecond as
    unit millimolar {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit litre_per_millisecond as
    unit litre;
    unit per_millisecond;
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit farad_per_cm2 as
    unit farad;
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit millimole_per_millisecond as
    unit mole {pref: milli};
    unit millisecond {expo: -1};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit millisecond {expo: -1};
  enddef;
  def unit dm2_per_second as
    unit meter {expo: 2, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_per_millisecond as
    unit millimolar {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimolar2_per_millisecond as
    unit millimolar {expo: -2};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit nanolitre as
    unit litre {pref: nano};
  enddef;
  def unit litre_per_farad_millisecond as
    unit litre;
    unit farad {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp cell as
    var V: millivolt {init: -85.719687955637, pub: out};
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Nab: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var i_NaK: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_tos: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_tof: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var i_K1: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_Kp: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var i_Cl_Ca: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005254
    // isVersionOf: http://identifiers.org/go/GO:0034707
    // isVersionOf: http://identifiers.org/go/GO:0005247
    var i_Clb: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_CaL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Cab: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Cap: microA_per_microF {pub: in};
    var i_Stim: microA_per_microF;
    var stim_start: millisecond {init: 100};
    var stim_period: millisecond {init: 1000};
    var stim_duration: millisecond {init: 5};
    var stim_amplitude: microA_per_microF {init: 9.5};
    i_Stim = sel
      case (time-floor(time/stim_period)*stim_period >= stim_start) and (time-floor(time/stim_period)*stim_period <= stim_start+stim_duration):
        -stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    ode(V, time) = -(i_Na+i_Nab+i_NaK+i_Kr+i_Ks+i_tos+i_tof+i_K1+i_Kp+i_NaCa+i_Cl_Ca+i_Clb+i_CaL+i_Cab+i_Cap+i_Stim);
  enddef;

  def comp model_parameters as
    var Ko: millimolar {init: 5.4, pub: out};
    var Nao: millimolar {init: 140, pub: out};
    var Cao: millimolar {init: 1.8, pub: out};
    var Clo: millimolar {init: 150, pub: out};
    var Ki: millimolar {init: 135, pub: out};
    var Mgi: millimolar {init: 1, pub: out};
    var Mgo: millimolar {init: 1, pub: out};
    var Cli: millimolar {init: 15, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.3, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96486.7, pub: out};
    var Cm: farad {pub: out};
    var Cm_per_area: farad_per_cm2 {init: 2e-6};
    var cell_length: micrometre {init: 100};
    var cell_radius: micrometre {init: 10.25};
    var jct_radius: micrometre {init: 0.16};
    var jct_depth: micrometre {init: 0.015};
    var SL_depth: micrometre {init: 0.045};
    var Vol_Cell: litre;
    var Vol_SR: litre {pub: out};
    var Vol_SL: litre {pub: out};
    var Vol_jct: litre {pub: out};
    var Vol_cytosol: litre {pub: out};
    var Vol_mito: litre {pub: out};
    Cm = Cm_per_area*2{dimensionless}*cell_radius/10000{centi2micro}*pi*cell_length/10000{centi2micro};
    Vol_Cell = 3.141592654{dimensionless}*sqr(cell_radius/1000{thou_mill})*cell_length/pow(1000{thou_mill}, 3{dimensionless});
    Vol_SR = 0.035{dimensionless}*Vol_Cell;
    Vol_SL = 0.02{dimensionless}*Vol_Cell;
    Vol_jct = 0.00051{dimensionless}*Vol_Cell;
    Vol_cytosol = 0.65{dimensionless}*Vol_Cell;
    Vol_mito = Vol_Cell-(Vol_SR+Vol_SL+Vol_jct+Vol_cytosol);
  enddef;

  def comp reversal_potentials as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na_jct: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na_SL: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var E_Ca_jct: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var E_Ca_SL: millivolt {pub: out};
    // isPropertyOf: http://identifiers.org/go/GO:0005267
    // isPropertyOf: http://identifiers.org/go/GO:0034705
    // isPropertyOf: http://identifiers.org/go/GO:0005249
    // isPropertyOf: http://identifiers.org/go/GO:0008076
    var E_K: millivolt {pub: out};
    // isPropertyOf: http://identifiers.org/go/GO:0005254
    // isPropertyOf: http://identifiers.org/go/GO:0034707
    // isPropertyOf: http://identifiers.org/go/GO:0005247
    var E_Cl: millivolt {pub: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Na_jct: millimolar {pub: in};
    var Na_SL: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_jct: millimolar {pub: in};
    var Ca_SL: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Cli: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    E_Na_jct = R*T/F*ln(Nao/Na_jct);
    E_Na_SL = R*T/F*ln(Nao/Na_SL);
    E_Ca_jct = R*T/(2{dimensionless}*F)*ln(Cao/Ca_jct);
    E_Ca_SL = R*T/(2{dimensionless}*F)*ln(Cao/Ca_SL);
    E_K = R*T/F*ln(Ko/Ki);
    E_Cl = -R*T/F*ln(Clo/Cli);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp INa as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na_jct: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na_SL: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var G_INa: milliS_per_microF {init: 16};
    var Fx_Na_jct: dimensionless {init: 0.11};
    var Fx_Na_SL: dimensionless {init: 0.89};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na_jct: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na_SL: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var j: dimensionless {priv: in};
    var openProb: dimensionless;
    openProb = pow(m, 3{dimensionless})*h*j;
    i_Na_jct = Fx_Na_jct*G_INa*openProb*(V-E_Na_jct);
    i_Na_SL = Fx_Na_SL*G_INa*openProb*(V-E_Na_SL);
    i_Na = i_Na_jct+i_Na_SL;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp INa_h_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {init: 0.987140350343, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_h: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_h: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var tau_h: millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_h = sel
      case V < -40{millivolt}:
        0.135{per_millisecond}*exp((80{millivolt}+V)/(-6.8{millivolt}));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        3.56{per_millisecond}*exp(0.079{per_millivolt}*V)+3.1e5{per_millisecond}*exp(0.35{per_millivolt}*V);
      otherwise:
        1{dimensionless}/(0.13{millisecond}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    h_infinity = alpha_h/(alpha_h+beta_h);
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp INa_j_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var j: dimensionless {init: 0.991822731369, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_j: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_j: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var tau_j: millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var j_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_j = sel
      case V < -40{millivolt}:
        (-1.2714e5{per_millisecond}*exp(0.2444{per_millivolt}*V)-3.474e-5{per_millisecond}*exp(-0.04391{per_millivolt}*V))*(V+37.78{millivolt})/1{millivolt}/(1{dimensionless}+exp(0.311{per_millivolt}*(V+79.23{millivolt})));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -40{millivolt}:
        0.1212{per_millisecond}*exp(-0.01052{per_millivolt}*V)/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+40.14{millivolt})));
      otherwise:
        0.3{per_millisecond}*exp(-2.535e-7{per_millivolt}*V)/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+32{millivolt})));
    endsel;
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    j_infinity = alpha_j/(alpha_j+beta_j);
    ode(j, time) = (j_infinity-j)/tau_j;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp INa_m_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {init: 0.001370685156, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_m: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_m: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var tau_m: millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    alpha_m = 0.32{per_millisecond}*(V+47.13{millivolt})/1{millivolt}/(1{dimensionless}-exp(-0.1{per_millivolt}*(V+47.13{millivolt})));
    beta_m = 0.08{per_millisecond}*exp(-V/11{millivolt});
    tau_m = 1{dimensionless}/(alpha_m+beta_m);
    m_infinity = alpha_m/(alpha_m+beta_m);
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  def comp INab as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Nab: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Nab_jct: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Nab_SL: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var G_NaBk: milliS_per_microF {init: 0.297e-3};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var Fx_NaBk_jct: dimensionless {init: 0.11};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var Fx_NaBk_SL: dimensionless {init: 0.89};
    var V: millivolt {pub: in};
    var E_Na_jct: millivolt {pub: in};
    var E_Na_SL: millivolt {pub: in};
    i_Nab_jct = Fx_NaBk_jct*G_NaBk*(V-E_Na_jct);
    i_Nab_SL = Fx_NaBk_SL*G_NaBk*(V-E_Na_SL);
    i_Nab = i_Nab_jct+i_Nab_SL;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0005391
  def comp INaK as
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var i_NaK: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var i_NaK_jct: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var i_NaK_SL: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var f_NaK: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var Q10_NaK: dimensionless {init: 1.63};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var Q_NaK: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var H_NaK: dimensionless {init: 4};
    var Q10_Km_Nai: dimensionless {init: 1.49};
    var Q_Km_Nai: dimensionless;
    var Km_Nai: millimolar {init: 11};
    var Km_Ko: millimolar {init: 1.5};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var I_NaK_max: microA_per_microF {init: 1.91};
    var sigma: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var Fx_NaK_jct: dimensionless {init: 0.11};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    var Fx_NaK_SL: dimensionless {init: 0.89};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Na_jct: millimolar {pub: in};
    var Na_SL: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    Q_NaK = pow(Q10_NaK, (T-310{kelvin})/10{kelvin});
    Q_Km_Nai = pow(Q10_Km_Nai, (T-310{kelvin})/10{kelvin});
    sigma = (exp(Nao/67.3{millimolar})-1{dimensionless})/7{dimensionless};
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK_jct = Fx_NaK_jct*Q_NaK*I_NaK_max*f_NaK/(1{dimensionless}+pow(Q_Km_Nai*Km_Nai/Na_jct, H_NaK))*Ko/(Ko+Km_Ko);
    i_NaK_SL = Fx_NaK_SL*Q_NaK*I_NaK_max*f_NaK/(1{dimensionless}+pow(Q_Km_Nai*Km_Nai/Na_SL, H_NaK))*Ko/(Ko+Km_Ko);
    i_NaK = i_NaK_jct+i_NaK_SL;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp IKr as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var G_IKr: milliS_per_microF;
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Xr: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Rr: dimensionless {priv: in};
    G_IKr = 0.03{milliS_per_microF}*sqrt(Ko/5.4{millimolar});
    i_Kr = G_IKr*Xr*Rr*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp IKr_Xr_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Xr: dimensionless {init: 0.008471550841, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Xr_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var tau_Xr: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(Xr, time) = (Xr_infinity-Xr)/tau_Xr;
    Xr_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(50{millivolt}+V)/7.5{millivolt}));
    tau_Xr = 1{millisecond}/(0.00138{per_millivolt}*(V+7{millivolt})/(1{dimensionless}-exp(-0.123{per_millivolt}*(V+7{millivolt})))+0.00061{per_millivolt}*(V+10{millivolt})/(exp(0.145{per_millivolt}*(V+10{millivolt}))-1{dimensionless}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp IKr_Rr_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Rr: dimensionless {pub: out};
    var V: millivolt {pub: in};
    Rr = 1{dimensionless}/(1{dimensionless}+exp((33{millivolt}+V)/22.4{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp IKs as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks_jct: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks_SL: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var G_Ks_SL: milliS_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var G_Ks_jct: milliS_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Fx_Ks_jct: dimensionless {init: 0.11};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Fx_Ks_SL: dimensionless {init: 0.89};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_Ks_jct: millivolt;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_Ks_SL: millivolt;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_Ks: millivolt;
    var pKNa: dimensionless {init: 0.01833};
    var pCa_jct: dimensionless;
    var pCa_SL: dimensionless;
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Na_jct: millimolar {pub: in};
    var Na_SL: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ca_jct: millimolar {pub: in};
    var Ca_SL: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Xs: dimensionless {priv: in};
    pCa_jct = -log(Ca_jct/1{millimolar}+3{dimensionless});
    pCa_SL = -log(Ca_SL/1{millimolar}+3{dimensionless});
    G_Ks_jct = 0.07{milliS_per_microF}*(0.057{dimensionless}+0.19{dimensionless}/(1{dimensionless}+exp(-7.2{dimensionless}+pCa_jct/0.6{dimensionless})));
    G_Ks_SL = 0.07{milliS_per_microF}*(0.057{dimensionless}+0.19{dimensionless}/(1{dimensionless}+exp(-7.2{dimensionless}+pCa_SL/0.6{dimensionless})));
    E_Ks_jct = R*T/F*ln((Ko+pKNa*Nao)/(Ki+pKNa*Na_jct));
    E_Ks_SL = R*T/F*ln((Ko+pKNa*Nao)/(Ki+pKNa*Na_SL));
    E_Ks = R*T/F*ln((Ko+pKNa*Nao)/(Ki+pKNa*Nai));
    i_Ks_jct = Fx_Ks_jct*G_Ks_jct*sqr(Xs)*(V-E_Ks);
    i_Ks_SL = Fx_Ks_SL*G_Ks_SL*sqr(Xs)*(V-E_Ks);
    i_Ks = i_Ks_jct+i_Ks_SL;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp IKs_Xs_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Xs: dimensionless {init: 0.00687399199, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var Xs_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var tau_Xs: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(Xs, time) = (Xs_infinity-Xs)/tau_Xs;
    Xs_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{millivolt})/16.7{millivolt}));
    tau_Xs = 1{millisecond}/(7.19e-5{per_millivolt}*(V+30{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(V+30{millivolt})))+1.31e-4{per_millivolt}*(V+30{millivolt})/(-1{dimensionless}+exp(0.0687{per_millivolt}*(V+30{millivolt}))));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Itos as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_tos: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var G_tos: milliS_per_microF {init: 0.02};
    var V: millivolt {priv: out, pub: in};
    var time: millisecond {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_tos: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_tos: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var R_tos: dimensionless {priv: in};
    i_tos = G_tos*X_tos*(Y_tos+0.5{dimensionless}*R_tos)*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Itos_X_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_tos: dimensionless {init: 0.004011272375, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_tos_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var tau_X_tos: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(X_tos, time) = (X_tos_infinity-X_tos)/tau_X_tos;
    X_tos_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+3{millivolt})/15{millivolt}));
    tau_X_tos = 9{millisecond}/(1{dimensionless}+exp((V+3{millivolt})/15{millivolt}))+0.5{millisecond};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Itos_Y_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_tos: dimensionless {init: 0.293519921626, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_tos_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var tau_Y_tos: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(Y_tos, time) = (Y_tos_infinity-Y_tos)/tau_Y_tos;
    Y_tos_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+33.5{millivolt})/10{millivolt}));
    tau_Y_tos = 3000{millisecond}/(1{dimensionless}+exp((V+60{millivolt})/10{millivolt}))+30{millisecond};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Itos_R_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var R_tos_other: dimensionless {init: 0.383430556383, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var R_tos_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var R_tos: dimensionless {pub: out};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var tau_R_tos: millisecond;
    var time: millisecond {pub: in};
    R_tos_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+33.5{millivolt})/10{millivolt}));
    tau_R_tos = 2.8e3{millisecond}/(1{dimensionless}+exp((V+60{millivolt})/10{millivolt}))+220{millisecond};
    R_tos = R_tos_infinity;
    ode(R_tos_other, time) = (R_tos_infinity-R_tos)/tau_R_tos;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Itof as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_tof: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var G_tof: milliS_per_microF {init: 0.06};
    var V: millivolt {priv: out, pub: in};
    var time: millisecond {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var E_K: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_tof: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_tof: dimensionless {priv: in};
    i_tof = G_tof*X_tof*Y_tof*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Itof_X_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_tof: dimensionless {init: 0.00401120993, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var X_tof_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var tau_X_tof: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(X_tof, time) = (X_tof_infinity-X_tof)/tau_X_tof;
    X_tof_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+3{millivolt})/15{millivolt}));
    tau_X_tof = 3.5{millisecond}*exp(-sqr(V/30{millivolt}))+1.5{millisecond};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Itof_Y_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_tof: dimensionless {init: 0.9946314893, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Y_tof_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var tau_Y_tof: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    ode(Y_tof, time) = (Y_tof_infinity-Y_tof)/tau_Y_tof;
    Y_tof_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+33.5{millivolt})/10{millivolt}));
    tau_Y_tof = 20{millisecond}/(1{dimensionless}+exp((V+33.5{millivolt})/10{millivolt}))+20{millisecond};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005241
  def comp IK1 as
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var i_K1: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var G_K1: milliS_per_microF;
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {priv: out, pub: in};
    var Ko: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var K1_infinity: dimensionless {priv: in};
    G_K1 = 0.9{milliS_per_microF}*sqrt(Ko/5.4{millimolar});
    i_K1 = G_K1*K1_infinity*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005241
  def comp IK1_K1_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var K1_infinity: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var alpha_K1: per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var beta_K1: per_millisecond;
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
    alpha_K1 = 1.02{per_millisecond}/(1{dimensionless}+exp(0.2385{per_millivolt}*(V-(E_K+59.215{millivolt}))));
    beta_K1 = (0.49124{per_millisecond}*exp(0.08032{per_millivolt}*(V-E_K+5.476{millivolt}))+1{per_millisecond}*exp(0.06175{per_millivolt}*(V-(E_K+594.31{millivolt}))))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(V-E_K+4.753{millivolt})));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp IKp as
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var i_Kp: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var E_K: millivolt {pub: in};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    var g_Kp: milliS_per_microF {init: 0.001};
    i_Kp = g_Kp*(V-E_K)/(1{dimensionless}+exp(7.488{dimensionless}-V/5.98{millivolt}));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005229
  def comp ICl_Ca as
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var i_Cl_Ca: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var G_Cl: milliS_per_microF {init: 0.109625};
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var Kd_ClCa: millimolar {init: 0.1};
    // isVersionOf: http://identifiers.org/go/GO:0005229
    var Fx_Cl_jct: dimensionless {init: 0.11};
    var Fx_Cl_SL: dimensionless {init: 0.89};
    var V: millivolt {pub: in};
    var E_Cl: millivolt {pub: in};
    var Ca_jct: millimolar {pub: in};
    var Ca_SL: millimolar {pub: in};
    i_Cl_Ca = G_Cl*(V-E_Cl)*(Fx_Cl_jct/(1{dimensionless}+Kd_ClCa/Ca_jct)+Fx_Cl_SL/(1{dimensionless}+Kd_ClCa/Ca_SL));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  def comp IClb as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Clb: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var G_ClBk: milliS_per_microF {init: 0.009};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var E_Cl: millivolt {pub: in};
    i_Clb = G_ClBk*(V-E_Cl);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp ICaL as
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_CaL: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_CaL_Ca_SL: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_CaL_Ca_jct: microA_per_microF {pub: out};
    var i_CaL_Na_SL: microA_per_microF {pub: out};
    var i_CaL_Na_jct: microA_per_microF {pub: out};
    var i_CaL_K: microA_per_microF;
    var PCa: litre_per_farad_millisecond {init: 5.4e-4};
    var PNa: litre_per_farad_millisecond {init: 1.5e-8};
    var PK: litre_per_farad_millisecond {init: 2.7e-7};
    var Fx_ICaL_jct: dimensionless {init: 0.9};
    var Fx_ICaL_SL: dimensionless {init: 0.1};
    var gamma_Cai: dimensionless {init: 0.341};
    var gamma_Cao: dimensionless {init: 0.341};
    var gamma_Nai: dimensionless {init: 0.75};
    var gamma_Nao: dimensionless {init: 0.75};
    var gamma_Ki: dimensionless {init: 0.75};
    var gamma_Ko: dimensionless {init: 0.75};
    var Q10_CaL: dimensionless {init: 1.8};
    var Q_CaL: dimensionless;
    var V: millivolt {priv: out, pub: in};
    var time: millisecond {priv: out, pub: in};
    var Cai: millimolar {priv: out, pub: in};
    var Na_SL: millimolar {pub: in};
    var Na_jct: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ca_SL: millimolar {priv: out, pub: in};
    var Ca_jct: millimolar {priv: out, pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var fCa_SL: dimensionless {priv: in};
    var fCa_jct: dimensionless {priv: in};
    var temp: coulomb_per_mole;
    Q_CaL = pow(Q10_CaL, (T-310{kelvin})/10{kelvin});
    temp = d*f*Q_CaL*V*sqr(F)/(R*T);
    i_CaL_Ca_jct = temp*fCa_jct*Fx_ICaL_jct*PCa*4{dimensionless}*(gamma_Cai*Ca_jct*exp(2{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_CaL_Na_jct = temp*fCa_jct*Fx_ICaL_jct*PNa*(gamma_Nai*Na_jct*exp(V*F/(R*T))-gamma_Nao*Nao)/(exp(V*F/(R*T))-1{dimensionless});
    i_CaL_Ca_SL = temp*fCa_SL*Fx_ICaL_SL*PCa*4{dimensionless}*(gamma_Cai*Ca_SL*exp(2{dimensionless}*V*F/(R*T))-gamma_Cao*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
    i_CaL_Na_SL = temp*fCa_SL*Fx_ICaL_SL*PNa*(gamma_Nai*Na_SL*exp(V*F/(R*T))-gamma_Nao*Nao)/(exp(V*F/(R*T))-1{dimensionless});
    i_CaL_K = temp*(fCa_SL*Fx_ICaL_SL+fCa_jct*Fx_ICaL_jct)*PK*(gamma_Ki*Ki*exp(V*F/(R*T))-gamma_Ko*Ko)/(exp(V*F/(R*T))-1{dimensionless});
    i_CaL = i_CaL_Ca_SL+i_CaL_Ca_jct+i_CaL_Na_SL+i_CaL_Na_jct+i_CaL_K;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp ICaL_d_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var d: dimensionless {init: 0.000006997531, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var d_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_d: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+14.5{millivolt})/6{millivolt}));
    tau_d = 1{millisecond}*d_infinity*(1{dimensionless}-exp(-(V+14.5{millivolt})/6{millivolt}))/(0.035{per_millivolt}*(V+14.5{millivolt}));
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/chebi/CHEBI:38215
  def comp ICaL_f_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38215
    var f: dimensionless {init: 1.000675515962, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var f_infinity: dimensionless;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var tau_f: millisecond;
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+35.06{millivolt})/3.6{millivolt}))+0.6{dimensionless}/(1{dimensionless}+exp((50{millivolt}-V)/20{millivolt}));
    tau_f = 1{millisecond}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_millivolt}*(V+14.5{millivolt})))+0.02{dimensionless});
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp ICaL_fCa_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var fCa_SL: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var fCa_jct: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var fCaB_SL: dimensionless {init: 0.015352888928, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var fCaB_jct: dimensionless {init: 0.024609183734, pub: out};
    var Ca_SL: millimolar {pub: in};
    var Ca_jct: millimolar {pub: in};
    var time: millisecond {pub: in};
    fCa_SL = 1{dimensionless}-fCaB_SL;
    fCa_jct = 1{dimensionless}-fCaB_jct;
    ode(fCaB_SL, time) = 1.7{per_millimolar_millisecond}*Ca_SL*(1{dimensionless}-fCaB_SL)-11.9{per_millisecond}*fCaB_SL;
    ode(fCaB_jct, time) = 1.7{per_millimolar_millisecond}*Ca_jct*(1{dimensionless}-fCaB_jct)-11.9{per_millisecond}*fCaB_jct;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp INaCa as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_SL: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_jct: microA_per_microF {pub: out};
    var V_max: microA_per_microF {init: 9};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var Fx_NCX_jct: dimensionless {init: 0.11};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var Fx_NCX_SL: dimensionless {init: 0.89};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var Q10_NCX: dimensionless {init: 1.57};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var Q_NCX: dimensionless;
    var K_mNai: millimolar {init: 12.29};
    var K_mCao: millimolar {init: 1.3};
    var K_mNao: millimolar {init: 87.5};
    var K_mCai: millimolar {init: 0.00359};
    var Ka_SL: dimensionless;
    var Ka_jct: dimensionless;
    var Kd_act: millimolar {init: 0.000256};
    var ksat: dimensionless {init: 0.27};
    var eta: dimensionless {init: 0.35};
    var HNa: dimensionless {init: 3};
    var V: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nai: millimolar {pub: in};
    var Na_SL: millimolar {pub: in};
    var Na_jct: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_SL: millimolar {pub: in};
    var Ca_jct: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var temp_jct: millimolar4;
    var temp_SL: millimolar4;
    temp_jct = (exp(eta*V*F/(R*T))*pow(Na_jct, HNa)*Cao-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Nao, HNa)*Ca_jct)/(1{dimensionless}+ksat*exp((eta-1{dimensionless})*V*F/(R*T)));
    temp_SL = (exp(eta*V*F/(R*T))*pow(Na_SL, HNa)*Cao-exp((eta-1{dimensionless})*V*F/(R*T))*pow(Nao, HNa)*Ca_SL)/(1{dimensionless}+ksat*exp((eta-1{dimensionless})*V*F/(R*T)));
    Q_NCX = pow(Q10_NCX, (T-310{kelvin})/10{kelvin});
    Ka_SL = 1{dimensionless}/(1{dimensionless}+pow(Kd_act/Ca_SL, 3{dimensionless}));
    Ka_jct = 1{dimensionless}/(1{dimensionless}+pow(Kd_act/Ca_jct, 3{dimensionless}));
    i_NaCa_jct = Fx_NCX_jct*V_max*Ka_jct*Q_NCX*temp_jct/(K_mCai*pow(Nao, HNa)*(1{dimensionless}+pow(Na_jct/K_mNai, HNa))+pow(K_mNao, HNa)*Ca_jct*(1{dimensionless}+Ca_jct/K_mCai)+K_mCao*pow(Na_jct, HNa)+pow(Na_jct, HNa)*Cao+pow(Nao, HNa)*Ca_jct);
    i_NaCa_SL = Fx_NCX_SL*V_max*Ka_SL*Q_NCX*temp_SL/(K_mCai*pow(Nao, HNa)*(1{dimensionless}+pow(Na_SL/K_mNai, HNa))+pow(K_mNao, HNa)*Ca_SL*(1{dimensionless}+Ca_SL/K_mCai)+K_mCao*pow(Na_SL, HNa)+pow(Na_SL, HNa)*Cao+pow(Nao, HNa)*Ca_SL);
    i_NaCa = i_NaCa_jct+i_NaCa_SL;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp ICap as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Cap: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Cap_SL: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Cap_jct: microA_per_microF {pub: out};
    var V_max: millimolar_per_millisecond {init: 2.2e-6};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var Fx_SLCaP_jct: dimensionless {init: 0.11};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var Fx_SLCaP_SL: dimensionless {init: 0.89};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var Q10_SLCaP: dimensionless {init: 2.35};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var Q_SLCaP: dimensionless;
    var Km: millimolar {init: 0.0005};
    var H: dimensionless {init: 1.6};
    var Cai: millimolar {pub: in};
    var Ca_SL: millimolar {pub: in};
    var Ca_jct: millimolar {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vol_cytosol: litre {pub: in};
    var Cm: farad {pub: in};
    var V_maxAF_old: microA_per_microF;
    var V_maxAF: microA_per_microF {init: 0.0673};
    V_maxAF_old = V_max*Vol_cytosol*2{dimensionless}*F/Cm;
    Q_SLCaP = pow(Q10_SLCaP, (T-310{kelvin})/10{kelvin});
    i_Cap_jct = Q_SLCaP*V_maxAF*Fx_SLCaP_jct/(1{dimensionless}+pow(Km/Ca_jct, H));
    i_Cap_SL = Q_SLCaP*V_maxAF*Fx_SLCaP_SL/(1{dimensionless}+pow(Km/Ca_SL, H));
    i_Cap = i_Cap_jct+i_Cap_SL;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  def comp ICab as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Cab: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Cab_jct: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Cab_SL: microA_per_microF {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var G_CaBk: milliS_per_microF {init: 0.0002513};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var Fx_CaBk_jct: dimensionless {init: 0.11};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var Fx_CaBk_SL: dimensionless {init: 0.89};
    var V: millivolt {pub: in};
    var E_Ca_SL: millivolt {pub: in};
    var E_Ca_jct: millivolt {pub: in};
    i_Cab_jct = G_CaBk*Fx_CaBk_jct*(V-E_Ca_jct);
    i_Cab_SL = G_CaBk*Fx_CaBk_SL*(V-E_Ca_SL);
    i_Cab = i_Cab_SL+i_Cab_jct;
  enddef;

  def comp Jrel_SR as
    var j_rel_SR: millimolar_per_millisecond {pub: out};
    var Max_SR: dimensionless {init: 15};
    var Min_SR: dimensionless {init: 1};
    var EC50_SR: millimolar {init: 0.45};
    var R: dimensionless {init: 0.884673513138, pub: out};
    var I: dimensionless {init: 0.00000009272, pub: out};
    var RI: dimensionless;
    var O: dimensionless {init: 0.000000711264, pub: out};
    var ks: per_millisecond {init: 25};
    var koCa: per_millimolar2_per_millisecond {init: 10};
    var kom: per_millisecond {init: 0.06};
    var kiCa: per_millimolar_per_millisecond {init: 0.5};
    var kim: per_millisecond {init: 0.005};
    var HSR: dimensionless {init: 2.5};
    var Ca_jct: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    var time: millisecond {pub: in};
    var kCaSR: dimensionless;
    var koSRCa: per_millimolar2_per_millisecond;
    var kiSRCa: per_millimolar_per_millisecond;
    kCaSR = Max_SR-(Max_SR-Min_SR)/(1{dimensionless}+pow(EC50_SR/Ca_SR, HSR));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    RI = 1{dimensionless}-R-O-I;
    ode(R, time) = kim*RI-kiSRCa*Ca_jct*R-(koSRCa*sqr(Ca_jct)*R-kom*O);
    ode(O, time) = koSRCa*sqr(Ca_jct)*R-kom*O-(kiSRCa*Ca_jct*O-kim*I);
    ode(I, time) = kiSRCa*Ca_jct*O-kim*I-(kom*I-koSRCa*sqr(Ca_jct)*RI);
    j_rel_SR = ks*O*(Ca_SR-Ca_jct);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp Jleak_SR as
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var j_leak_SR: millimolar_per_millisecond {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var KSRleak: per_millisecond {init: 5.348e-6};
    var Ca_jct: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    j_leak_SR = KSRleak*(Ca_SR-Ca_jct);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0051208
  // isVersionOf: http://identifiers.org/go/GO:0070296
  def comp Jpump_SR as
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var j_pump_SR: millimolar_per_millisecond {pub: out};
    var V_max: millimolar_per_millisecond {init: 286e-6};
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var Q10_SRCaP: dimensionless {init: 2.6};
    // isVersionOf: http://identifiers.org/go/GO:0051208
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var Q_SRCaP: dimensionless;
    var Kmf: millimolar {init: 0.000246};
    var Kmr: millimolar {init: 1.7};
    var H: dimensionless {init: 1.787};
    var Cai: millimolar {pub: in};
    var Ca_SR: millimolar {pub: in};
    var T: kelvin {pub: in};
    var Vol_SR: litre {pub: in};
    var Vol_cytosol: litre {priv: out, pub: in};
    Q_SRCaP = pow(Q10_SRCaP, (T-310{kelvin})/10{kelvin});
    j_pump_SR = Q_SRCaP*V_max*Vol_cytosol/Vol_SR*(pow(Cai/Kmf, H)-pow(Ca_SR/Kmr, H))/(1{dimensionless}+pow(Cai/Kmf, H)+pow(Ca_SR/Kmr, H));
  enddef;

  def comp ion_diffusion as
    var J_Na_jct_SL: millimole_per_millisecond {pub: out};
    var J_Na_SL_cytosol: millimole_per_millisecond {pub: out};
    var J_Ca_jct_SL: millimole_per_millisecond {pub: out};
    var J_Ca_SL_cytosol: millimole_per_millisecond {pub: out};
    var D_Ca_jct_SL: dm2_per_second {init: 1.64e-6};
    var D_Ca_SL_cytosol: dm2_per_second {init: 1.22e-6};
    var D_Na_jct_SL: dm2_per_second {init: 1.09e-5};
    var D_Na_SL_cytosol: dm2_per_second {init: 1.79e-5};
    var x_jct_SL: micrometre {init: 0.5};
    var x_SL_cytosol: micrometre {init: 0.45};
    var A_jct_SL: cm2 {init: 3.01e-6};
    var A_SL_cytosol: cm2 {init: 1.3e-4};
    var Na_SL: millimolar {pub: in};
    var Na_jct: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ca_SL: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_jct: millimolar {pub: in};
    var j_Na_jct_SL: litre_per_millisecond;
    var j_Na_SL_cytosol: litre_per_millisecond;
    var j_Ca_jct_SL: litre_per_millisecond;
    var j_Ca_SL_cytosol: litre_per_millisecond;
    var j_Na_jct_SL_new: litre_per_millisecond;
    var j_Na_SL_cytosol_new: litre_per_millisecond;
    var j_Ca_jct_SL_new: litre_per_millisecond;
    var j_Ca_SL_cytosol_new: litre_per_millisecond;
    j_Na_jct_SL = D_Na_jct_SL*A_jct_SL/x_jct_SL;
    j_Na_SL_cytosol = D_Na_SL_cytosol*A_SL_cytosol/x_SL_cytosol;
    j_Ca_jct_SL = D_Ca_jct_SL*A_jct_SL/x_jct_SL;
    j_Ca_SL_cytosol = D_Ca_SL_cytosol*A_SL_cytosol/x_SL_cytosol;
    j_Na_jct_SL_new = 1.8313e-14{litre_per_millisecond};
    j_Na_SL_cytosol_new = 1.6386e-12{litre_per_millisecond};
    j_Ca_jct_SL_new = 8.2413e-13{litre_per_millisecond};
    j_Ca_SL_cytosol_new = 3.7243e-12{litre_per_millisecond};
    J_Na_jct_SL = (Na_jct-Na_SL)*j_Na_jct_SL;
    J_Na_SL_cytosol = (Na_SL-Nai)*j_Na_SL_cytosol;
    J_Ca_jct_SL = (Ca_jct-Ca_SL)*j_Ca_jct_SL;
    J_Ca_SL_cytosol = (Ca_SL-Cai)*j_Ca_SL_cytosol;
  enddef;

  def comp Na_buffer as
    var Na_SL: millimolar {init: 8.874077316753, pub: out};
    var Na_jct: millimolar {init: 8.872823559072, pub: out};
    var Na_SL_buf: millimolar {init: 0.776121392467, pub: out};
    var Na_jct_buf: millimolar {init: 3.557055389701, pub: out};
    var Nai: millimolar {init: 8.874461106492, pub: out};
    var Bmax_SL: millimolar {init: 1.65};
    var Bmax_jct: millimolar {init: 3.7};
    var kon: per_millimolar_per_millisecond {init: 0.0001};
    var koff: per_millisecond {init: 1e-3};
    var J_Na_jct_SL: millimole_per_millisecond {pub: in};
    var J_Na_SL_cytosol: millimole_per_millisecond {pub: in};
    var i_Na_jct: microA_per_microF {pub: in};
    // isPropertyOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_jct: microA_per_microF {pub: in};
    var i_Nab_jct: microA_per_microF {pub: in};
    var i_NaK_jct: microA_per_microF {pub: in};
    var i_CaL_Na_jct: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na_SL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_SL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_Nab_SL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK_SL: microA_per_microF {pub: in};
    var i_CaL_Na_SL: microA_per_microF {pub: in};
    var Vol_SR: litre {pub: in};
    var Vol_SL: litre {pub: in};
    var Vol_jct: litre {pub: in};
    var Vol_cytosol: litre {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: farad {pub: in};
    var time: millisecond {pub: in};
    var dNa_jct_buf: millimolar_per_millisecond;
    var dNa_SL_buf: millimolar_per_millisecond;
    dNa_jct_buf = kon*Na_jct*(Bmax_jct-Na_jct_buf)-koff*Na_jct_buf;
    dNa_SL_buf = kon*Na_SL*(Bmax_SL-Na_SL_buf)-koff*Na_SL_buf;
    ode(Na_jct_buf, time) = dNa_jct_buf;
    ode(Na_SL_buf, time) = dNa_SL_buf;
    ode(Na_jct, time) = -Cm*(i_Na_jct+3{dimensionless}*i_NaCa_jct+i_Nab_jct+3{dimensionless}*i_NaK_jct+i_CaL_Na_jct)/(Vol_jct*F)-J_Na_jct_SL/Vol_jct-dNa_jct_buf;
    ode(Na_SL, time) = -Cm*(i_Na_SL+3{dimensionless}*i_NaCa_SL+i_Nab_SL+3{dimensionless}*i_NaK_SL+i_CaL_Na_SL)/(Vol_SL*F)+(J_Na_jct_SL-J_Na_SL_cytosol)/Vol_SL-dNa_SL_buf;
    ode(Nai, time) = J_Na_SL_cytosol/Vol_cytosol;
  enddef;

  def comp Ca_buffer as
    var Ca_SR: millimolar {init: 0.545611267699, priv: out, pub: out};
    var Ca_SL: millimolar {init: 0.000106395937, priv: out, pub: out};
    var Ca_jct: millimolar {init: 0.000174843061, priv: out, pub: out};
    var Cai: millimolar {init: 0.000087350002, priv: out, pub: out};
    var Mgi: millimolar {priv: out, pub: in};
    var Ca_SLB_SL: millimolar {init: 0.009868629147, pub: out};
    var Ca_SLB_jct: millimolar {init: 0.007780801995, pub: out};
    var Ca_SLHigh_SL: millimolar {init: 0.114438990328, pub: out};
    var Ca_SLHigh_jct: millimolar {init: 0.077503874257, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var Ca_Calsequestrin: millimolar {init: 1.186496899338, pub: out};
    var Bmax_SLB_SL: millimolar {init: 0.0374};
    var Bmax_SLB_jct: millimolar {init: 0.0046};
    var Bmax_SLHigh_SL: millimolar {init: 0.0134};
    var Bmax_SLHigh_jct: millimolar {init: 0.00165};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var Bmax_Calsequestrin: millimolar {init: 0.14};
    var kon_SL: per_millimolar_per_millisecond {init: 100};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var kon_Calsequestrin: per_millimolar_per_millisecond {init: 100};
    var koff_SLB: per_millisecond {init: 1.3};
    var koff_SLHigh: per_millisecond {init: 30e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var koff_Calsequestrin: per_millisecond {init: 65};
    // isPropertyOf: http://identifiers.org/go/GO:0005262
    // isPropertyOf: http://identifiers.org/go/GO:0034704
    // isPropertyOf: http://identifiers.org/go/GO:0005245
    // isPropertyOf: http://identifiers.org/go/GO:0005891
    var i_CaL_Ca_jct: microA_per_microF {pub: in};
    // isPropertyOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_jct: microA_per_microF {pub: in};
    // isPropertyOf: http://identifiers.org/go/GO:0005262
    // isPropertyOf: http://identifiers.org/go/GO:0034704
    var i_Cab_jct: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Cap_jct: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_CaL_Ca_SL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_SL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Cab_SL: microA_per_microF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Cap_SL: microA_per_microF {pub: in};
    var j_pump_SR: millimolar_per_millisecond {pub: in};
    var j_rel_SR: millimolar_per_millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var j_leak_SR: millimolar_per_millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var J_Ca_jct_SL: millimole_per_millisecond {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var J_Ca_SL_cytosol: millimole_per_millisecond {pub: in};
    var Vol_SR: litre {pub: in};
    var Vol_SL: litre {priv: out, pub: in};
    var Vol_jct: litre {priv: out, pub: in};
    var Vol_cytosol: litre {priv: out, pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: farad {pub: in};
    var time: millisecond {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var dCalsequestrin: millimolar_per_millisecond;
    var dCa_cytosol_tot_bound: millimolar_per_millisecond {priv: in};
    var dCa_SLB_SL: millimolar_per_millisecond;
    var dCa_SLB_jct: millimolar_per_millisecond;
    var dCa_SLHigh_SL: millimolar_per_millisecond;
    var dCa_SLHigh_jct: millimolar_per_millisecond;
    var dCa_jct_tot_bound: millimolar_per_millisecond;
    var dCa_SL_tot_bound: millimolar_per_millisecond;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_jct_tot: microA_per_microF;
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_SL_tot: microA_per_microF;
    dCalsequestrin = kon_Calsequestrin*Ca_SR*(Bmax_Calsequestrin*Vol_cytosol/Vol_SR-Ca_Calsequestrin)-koff_Calsequestrin*Ca_Calsequestrin;
    ode(Ca_Calsequestrin, time) = dCalsequestrin;
    dCa_SLB_SL = kon_SL*Ca_SL*(Bmax_SLB_SL*Vol_cytosol/Vol_SL-Ca_SLB_SL)-koff_SLB*Ca_SLB_SL;
    dCa_SLB_jct = kon_SL*Ca_jct*(Bmax_SLB_jct*Vol_cytosol/Vol_jct-Ca_SLB_jct)-koff_SLB*Ca_SLB_jct;
    dCa_SLHigh_SL = kon_SL*Ca_SL*(Bmax_SLHigh_SL*Vol_cytosol/Vol_SL-Ca_SLHigh_SL)-koff_SLHigh*Ca_SLHigh_SL;
    dCa_SLHigh_jct = kon_SL*Ca_jct*(Bmax_SLHigh_jct*Vol_cytosol/Vol_jct-Ca_SLHigh_jct)-koff_SLHigh*Ca_SLHigh_jct;
    ode(Ca_SLB_SL, time) = dCa_SLB_SL;
    ode(Ca_SLB_jct, time) = dCa_SLB_jct;
    ode(Ca_SLHigh_SL, time) = dCa_SLHigh_SL;
    ode(Ca_SLHigh_jct, time) = dCa_SLHigh_jct;
    dCa_jct_tot_bound = dCa_SLB_jct+dCa_SLHigh_jct;
    dCa_SL_tot_bound = dCa_SLB_SL+dCa_SLHigh_SL;
    i_Ca_jct_tot = i_CaL_Ca_jct-2{dimensionless}*i_NaCa_jct+i_Cab_jct+i_Cap_jct;
    i_Ca_SL_tot = i_CaL_Ca_SL-2{dimensionless}*i_NaCa_SL+i_Cab_SL+i_Cap_SL;
    ode(Ca_SR, time) = j_pump_SR-(j_leak_SR*Vol_cytosol/Vol_SR+j_rel_SR)-dCalsequestrin;
    ode(Ca_jct, time) = -i_Ca_jct_tot*Cm/(Vol_jct*2{dimensionless}*F)-J_Ca_jct_SL/Vol_jct+j_rel_SR*Vol_SR/Vol_jct+j_leak_SR*Vol_cytosol/Vol_jct-1{dimensionless}*dCa_jct_tot_bound;
    ode(Ca_SL, time) = -i_Ca_SL_tot*Cm/(Vol_SL*2{dimensionless}*F)+(J_Ca_jct_SL-J_Ca_SL_cytosol)/Vol_SL-1{dimensionless}*dCa_SL_tot_bound;
    ode(Cai, time) = -j_pump_SR*Vol_SR/Vol_cytosol+J_Ca_SL_cytosol/Vol_cytosol-1{dimensionless}*dCa_cytosol_tot_bound;
  enddef;

  def comp cytosolic_Ca_buffer as
    var Cai: millimolar {pub: in};
    var Mgi: millimolar {pub: in};
    var time: millisecond {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var Ca_TroponinC: millimolar {init: 0.008963736337, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var Ca_TroponinC_Ca_Mg: millimolar {init: 0.117995194438, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var Mg_TroponinC_Ca_Mg: millimolar {init: 0.010337654274, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var Ca_Calmodulin: millimolar {init: 0.000295961245, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:67840
    var Ca_Myosin: millimolar {init: 0.001984672275, pub: out};
    var Mg_Myosin: millimolar {init: 0.137497736234, pub: out};
    var Ca_SRB: millimolar {init: 0.002177112381, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var Bmax_TroponinC: millimolar {init: 0.07};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var Bmax_TroponinC_Ca_Mg_Ca: millimolar {init: 0.14};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var Bmax_TroponinC_Ca_Mg_Mg: millimolar {init: 0.14};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var Bmax_Calmodulin: millimolar {init: 0.024};
    // isVersionOf: http://identifiers.org/fma/FMA:67840
    var Bmax_Myosin_Ca: millimolar {init: 0.14};
    // isVersionOf: http://identifiers.org/fma/FMA:67840
    var Bmax_Myosin_Mg: millimolar {init: 0.14};
    var Bmax_SRB: millimolar {init: 0.019};
    var kon_TroponinC: per_millimolar_per_millisecond {init: 32.7};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var kon_TroponinC_Ca_Mg_Ca: per_millimolar_per_millisecond {init: 2.37};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var kon_TroponinC_Ca_Mg_Mg: per_millimolar_per_millisecond {init: 3e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var kon_Calmodulin: per_millimolar_per_millisecond {init: 34};
    // isVersionOf: http://identifiers.org/fma/FMA:67840
    var kon_Myosin_Ca: per_millimolar_per_millisecond {init: 13.8};
    // isVersionOf: http://identifiers.org/fma/FMA:67840
    var kon_Myosin_Mg: per_millimolar_per_millisecond {init: 15.7e-3};
    var kon_SRB: per_millimolar_per_millisecond {init: 100};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    var koff_TroponinC: per_millisecond {init: 19.6e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var koff_TroponinC_Ca_Mg_Ca: per_millisecond {init: 0.032e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/go/GO:0030172
    var koff_TroponinC_Ca_Mg_Mg: per_millisecond {init: 3.33e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var koff_Calmodulin: per_millisecond {init: 238e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:67840
    var koff_Myosin_Ca: per_millisecond {init: 0.46e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:67840
    var koff_Myosin_Mg: per_millisecond {init: 0.057e-3};
    var koff_SRB: per_millisecond {init: 60e-3};
    var dCa_TroponinC: millimolar_per_millisecond;
    var dCa_TroponinC_Ca_Mg: millimolar_per_millisecond;
    var dMg_TroponinC_Ca_Mg: millimolar_per_millisecond;
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var dCa_Calmodulin: millimolar_per_millisecond;
    // isVersionOf: http://identifiers.org/fma/FMA:67840
    var dCa_Myosin: millimolar_per_millisecond;
    // isVersionOf: http://identifiers.org/fma/FMA:67840
    var dMg_Myosin: millimolar_per_millisecond;
    var dCa_SRB: millimolar_per_millisecond;
    var dCa_cytosol_tot_bound: millimolar_per_millisecond {pub: out};
    dCa_TroponinC = kon_TroponinC*Cai*(Bmax_TroponinC-Ca_TroponinC)-koff_TroponinC*Ca_TroponinC;
    dCa_TroponinC_Ca_Mg = kon_TroponinC_Ca_Mg_Ca*Cai*(Bmax_TroponinC_Ca_Mg_Ca-(Ca_TroponinC_Ca_Mg+Mg_TroponinC_Ca_Mg))-koff_TroponinC_Ca_Mg_Ca*Ca_TroponinC_Ca_Mg;
    dMg_TroponinC_Ca_Mg = kon_TroponinC_Ca_Mg_Mg*Mgi*(Bmax_TroponinC_Ca_Mg_Mg-(Ca_TroponinC_Ca_Mg+Mg_TroponinC_Ca_Mg))-koff_TroponinC_Ca_Mg_Mg*Mg_TroponinC_Ca_Mg;
    dCa_Calmodulin = kon_Calmodulin*Cai*(Bmax_Calmodulin-Ca_Calmodulin)-koff_Calmodulin*Ca_Calmodulin;
    dCa_Myosin = kon_Myosin_Ca*Cai*(Bmax_Myosin_Ca-(Ca_Myosin+Mg_Myosin))-koff_Myosin_Ca*Ca_Myosin;
    dMg_Myosin = kon_Myosin_Mg*Mgi*(Bmax_Myosin_Mg-(Ca_Myosin+Mg_Myosin))-koff_Myosin_Mg*Mg_Myosin;
    dCa_SRB = kon_SRB*Cai*(Bmax_SRB-Ca_SRB)-koff_SRB*Ca_SRB;
    dCa_cytosol_tot_bound = dCa_TroponinC+dCa_TroponinC_Ca_Mg+dMg_TroponinC_Ca_Mg+dCa_Calmodulin+dCa_Myosin+dMg_Myosin+dCa_SRB;
    ode(Ca_TroponinC, time) = dCa_TroponinC;
    ode(Ca_TroponinC_Ca_Mg, time) = dCa_TroponinC_Ca_Mg;
    ode(Mg_TroponinC_Ca_Mg, time) = dMg_TroponinC_Ca_Mg;
    ode(Ca_Calmodulin, time) = dCa_Calmodulin;
    ode(Ca_Myosin, time) = dCa_Myosin;
    ode(Mg_Myosin, time) = dMg_Myosin;
    ode(Ca_SRB, time) = dCa_SRB;
  enddef;

  def comp indo_fluo_Ca_buffer_not_connected as
    var Cai: millimolar {pub: in};
    var Ca_SL: millimolar {pub: in};
    var Ca_jct: millimolar {pub: in};
    var time: millisecond {pub: in};
    var Vol_SL: litre {pub: in};
    var Vol_jct: litre {pub: in};
    var Vol_cytosol: litre {pub: in};
    var Indo1: millimolar {init: 0};
    var Fluo3: millimolar {init: 0};
    var Ca_Indo1_Cytosol: millimolar {init: 0, pub: out};
    var Ca_Indo1_SL: millimolar {init: 0, pub: out};
    var Ca_Indo1_jct: millimolar {init: 0, pub: out};
    var Ca_Fluo3_Cytosol: millimolar {init: 0, pub: out};
    var Ca_Fluo3_SL: millimolar {init: 0, pub: out};
    var Ca_Fluo3_jct: millimolar {init: 0, pub: out};
    var Bmax_Indo1_Cytosol: millimolar {init: 0.025};
    var Bmax_Indo1_SL: millimolar {init: 0.00077};
    var Bmax_Indo1_jct: millimolar {init: 0.00002};
    var Bmax_Fluo3_Cytosol: millimolar {init: 0.025};
    var Bmax_Fluo3_SL: millimolar {init: 0.00077};
    var Bmax_Fluo3_jct: millimolar {init: 0.00002};
    var kon_Indo1: per_millimolar2_per_millisecond {init: 100};
    var kon_Fluo3: per_millimolar2_per_millisecond {init: 100};
    var koff_Indo1: per_millisecond {init: 60e-3};
    var koff_Fluo3: per_millisecond {init: 110e-3};
    var Indo1Bound: millimolar;
    var Fluo3Bound: millimolar;
    var dCa_Indo1_Cytosol: millimolar_per_millisecond {pub: out};
    var dCa_Indo1_jct: millimolar_per_millisecond {pub: out};
    var dCa_Indo1_SL: millimolar_per_millisecond {pub: out};
    var dCa_Fluo3_Cytosol: millimolar_per_millisecond {pub: out};
    var dCa_Fluo3_jct: millimolar_per_millisecond {pub: out};
    var dCa_Fluo3_SL: millimolar_per_millisecond {pub: out};
    Indo1Bound = Ca_Indo1_Cytosol+Ca_Indo1_jct*Vol_jct/Vol_cytosol+Ca_Indo1_SL*Vol_SL/Vol_cytosol;
    Fluo3Bound = Ca_Fluo3_Cytosol+Ca_Fluo3_jct*Vol_jct/Vol_cytosol+Ca_Fluo3_SL*Vol_SL/Vol_cytosol;
    dCa_Indo1_Cytosol = kon_Indo1*(Indo1-Indo1Bound)*Cai*(Bmax_Indo1_Cytosol-Ca_Indo1_Cytosol)-koff_Indo1*Ca_Indo1_Cytosol;
    dCa_Indo1_jct = kon_Indo1*(Indo1-Indo1Bound)*Ca_jct*(Bmax_Indo1_jct*Vol_cytosol/Vol_jct-Ca_Indo1_jct)-koff_Indo1*Ca_Indo1_jct;
    dCa_Indo1_SL = kon_Indo1*(Indo1-Indo1Bound)*Ca_SL*(Bmax_Indo1_SL*Vol_cytosol/Vol_SL-Ca_Indo1_SL)-koff_Indo1*Ca_Indo1_SL;
    dCa_Fluo3_Cytosol = kon_Fluo3*(Fluo3-Fluo3Bound)*Cai*(Bmax_Fluo3_Cytosol-Ca_Fluo3_Cytosol)-koff_Fluo3*Ca_Fluo3_Cytosol;
    dCa_Fluo3_jct = kon_Fluo3*(Fluo3-Fluo3Bound)*Ca_jct*(Bmax_Fluo3_jct*Vol_cytosol/Vol_jct-Ca_Fluo3_jct)-koff_Fluo3*Ca_Fluo3_jct;
    dCa_Fluo3_SL = kon_Fluo3*(Fluo3-Fluo3Bound)*Ca_SL*(Bmax_Fluo3_SL*Vol_cytosol/Vol_SL-Ca_Fluo3_SL)-koff_Fluo3*Ca_Fluo3_SL;
    ode(Ca_Indo1_Cytosol, time) = dCa_Indo1_Cytosol;
    ode(Ca_Indo1_SL, time) = dCa_Indo1_SL;
    ode(Ca_Indo1_jct, time) = dCa_Indo1_jct;
    ode(Ca_Fluo3_Cytosol, time) = dCa_Fluo3_Cytosol;
    ode(Ca_Fluo3_SL, time) = dCa_Fluo3_SL;
    ode(Ca_Fluo3_jct, time) = dCa_Fluo3_jct;
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp intracellular_currents as
  enddef;

  def group as containment for
    comp cell incl
      comp transmembrane_currents incl
        comp INa incl
          comp INa_m_gate;
          comp INa_h_gate;
          comp INa_j_gate;
        endcomp;
        comp ICaL incl
          comp ICaL_d_gate;
          comp ICaL_f_gate;
          comp ICaL_fCa_gate;
        endcomp;
        comp ICap;
        comp ICab;
        comp IKs incl
          comp IKs_Xs_gate;
        endcomp;
        comp IKr incl
          comp IKr_Xr_gate;
          comp IKr_Rr_gate;
        endcomp;
        comp Itof incl
          comp Itof_X_gate;
          comp Itof_Y_gate;
        endcomp;
        comp Itos incl
          comp Itos_X_gate;
          comp Itos_Y_gate;
          comp Itos_R_gate;
        endcomp;
        comp IK1 incl
          comp IK1_K1_gate;
        endcomp;
        comp IKp;
        comp ICl_Ca;
        comp IClb;
        comp INaCa;
        comp INab;
        comp INaK;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp Ca_buffer incl
          comp cytosolic_Ca_buffer;
          comp indo_fluo_Ca_buffer_not_connected;
        endcomp;
        comp reversal_potentials;
        comp ion_diffusion;
        comp Na_buffer;
      endcomp;
      comp intracellular_currents incl
        comp Jpump_SR;
        comp Jrel_SR;
        comp Jleak_SR;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp INa incl
      comp INa_m_gate;
      comp INa_h_gate;
      comp INa_j_gate;
    endcomp;
    comp ICaL incl
      comp ICaL_d_gate;
      comp ICaL_f_gate;
      comp ICaL_fCa_gate;
    endcomp;
    comp IKs incl
      comp IKs_Xs_gate;
    endcomp;
    comp IKr incl
      comp IKr_Xr_gate;
      comp IKr_Rr_gate;
    endcomp;
    comp Itof incl
      comp Itof_X_gate;
      comp Itof_Y_gate;
    endcomp;
    comp Itos incl
      comp Itos_X_gate;
      comp Itos_Y_gate;
      comp Itos_R_gate;
    endcomp;
    comp IK1 incl
      comp IK1_K1_gate;
    endcomp;
    comp Ca_buffer incl
      comp cytosolic_Ca_buffer;
      comp indo_fluo_Ca_buffer_not_connected;
    endcomp;
  enddef;
  def map between cell and environment for
    vars time and time;
  enddef;
  def map between Na_buffer and environment for
    vars time and time;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between Itos and environment for
    vars time and time;
  enddef;
  def map between Itof and environment for
    vars time and time;
  enddef;
  def map between IKs and environment for
    vars time and time;
  enddef;
  def map between IKr and environment for
    vars time and time;
  enddef;
  def map between Jrel_SR and environment for
    vars time and time;
  enddef;
  def map between Ca_buffer and environment for
    vars time and time;
  enddef;
  def map between ICaL and environment for
    vars time and time;
  enddef;
  def map between cell and INa for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between cell and ICaL for
    vars V and V;
    vars i_CaL and i_CaL;
  enddef;
  def map between cell and Itos for
    vars V and V;
    vars i_tos and i_tos;
  enddef;
  def map between cell and Itof for
    vars V and V;
    vars i_tof and i_tof;
  enddef;
  def map between cell and IKs for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between cell and IKr for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between cell and IK1 for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between cell and IKp for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between cell and INaCa for
    vars V and V;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between cell and INaK for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between cell and INab for
    vars V and V;
    vars i_Nab and i_Nab;
  enddef;
  def map between cell and ICab for
    vars V and V;
    vars i_Cab and i_Cab;
  enddef;
  def map between cell and ICl_Ca for
    vars V and V;
    vars i_Cl_Ca and i_Cl_Ca;
  enddef;
  def map between cell and IClb for
    vars V and V;
    vars i_Clb and i_Clb;
  enddef;
  def map between cell and ICap for
    vars i_Cap and i_Cap;
  enddef;
  def map between reversal_potentials and INa for
    vars E_Na_jct and E_Na_jct;
    vars E_Na_SL and E_Na_SL;
  enddef;
  def map between reversal_potentials and Itos for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and Itof for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and IKr for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and IK1 for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and IKp for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and INab for
    vars E_Na_jct and E_Na_jct;
    vars E_Na_SL and E_Na_SL;
  enddef;
  def map between reversal_potentials and ICab for
    vars E_Ca_SL and E_Ca_SL;
    vars E_Ca_jct and E_Ca_jct;
  enddef;
  def map between reversal_potentials and ICl_Ca for
    vars E_Cl and E_Cl;
  enddef;
  def map between reversal_potentials and IClb for
    vars E_Cl and E_Cl;
  enddef;
  def map between reversal_potentials and Na_buffer for
    vars Nai and Nai;
    vars Na_jct and Na_jct;
    vars Na_SL and Na_SL;
  enddef;
  def map between reversal_potentials and Ca_buffer for
    vars Cai and Cai;
    vars Ca_jct and Ca_jct;
    vars Ca_SL and Ca_SL;
  enddef;
  def map between reversal_potentials and model_parameters for
    vars Ki and Ki;
    vars Cli and Cli;
    vars Clo and Clo;
    vars Nao and Nao;
    vars Cao and Cao;
    vars Ko and Ko;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and Ca_buffer for
    vars Mgi and Mgi;
    vars Vol_SR and Vol_SR;
    vars Vol_SL and Vol_SL;
    vars Vol_jct and Vol_jct;
    vars Vol_cytosol and Vol_cytosol;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between model_parameters and ICaL for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between model_parameters and INaCa for
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Cao and Cao;
  enddef;
  def map between model_parameters and INaK for
    vars Ko and Ko;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and IKr for
    vars Ko and Ko;
  enddef;
  def map between model_parameters and IKs for
    vars Ko and Ko;
    vars Ki and Ki;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and IK1 for
    vars Ko and Ko;
  enddef;
  def map between model_parameters and ICap for
    vars T and T;
    vars Vol_cytosol and Vol_cytosol;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between model_parameters and Jpump_SR for
    vars T and T;
    vars Vol_SR and Vol_SR;
    vars Vol_cytosol and Vol_cytosol;
  enddef;
  def map between model_parameters and Na_buffer for
    vars Vol_SR and Vol_SR;
    vars Vol_SL and Vol_SL;
    vars Vol_jct and Vol_jct;
    vars Vol_cytosol and Vol_cytosol;
    vars F and F;
    vars Cm and Cm;
  enddef;
  def map between INa and INa_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between INa and INa_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between INa and INa_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICaL and ICaL_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICaL and ICaL_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICaL and ICaL_fCa_gate for
    vars fCa_SL and fCa_SL;
    vars fCa_jct and fCa_jct;
    vars time and time;
    vars Ca_SL and Ca_SL;
    vars Ca_jct and Ca_jct;
  enddef;
  def map between Itos and Itos_X_gate for
    vars X_tos and X_tos;
    vars time and time;
    vars V and V;
  enddef;
  def map between Itos and Itos_Y_gate for
    vars Y_tos and Y_tos;
    vars time and time;
    vars V and V;
  enddef;
  def map between Itos and Itos_R_gate for
    vars R_tos and R_tos;
    vars time and time;
    vars V and V;
  enddef;
  def map between Itof and Itof_X_gate for
    vars X_tof and X_tof;
    vars time and time;
    vars V and V;
  enddef;
  def map between Itof and Itof_Y_gate for
    vars Y_tof and Y_tof;
    vars time and time;
    vars V and V;
  enddef;
  def map between IKs and IKs_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between IKr and IKr_Xr_gate for
    vars Xr and Xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between IKr and IKr_Rr_gate for
    vars Rr and Rr;
    vars V and V;
  enddef;
  def map between IK1 and IK1_K1_gate for
    vars K1_infinity and K1_infinity;
    vars V and V;
    vars E_K and E_K;
  enddef;
  def map between ion_diffusion and Na_buffer for
    vars Nai and Nai;
    vars Na_jct and Na_jct;
    vars Na_SL and Na_SL;
    vars J_Na_jct_SL and J_Na_jct_SL;
    vars J_Na_SL_cytosol and J_Na_SL_cytosol;
  enddef;
  def map between ion_diffusion and Ca_buffer for
    vars Cai and Cai;
    vars Ca_jct and Ca_jct;
    vars Ca_SL and Ca_SL;
    vars J_Ca_jct_SL and J_Ca_jct_SL;
    vars J_Ca_SL_cytosol and J_Ca_SL_cytosol;
  enddef;
  def map between ICl_Ca and Ca_buffer for
    vars Ca_jct and Ca_jct;
    vars Ca_SL and Ca_SL;
  enddef;
  def map between INaK and Na_buffer for
    vars Nai and Nai;
    vars Na_jct and Na_jct;
    vars Na_SL and Na_SL;
    vars i_NaK_jct and i_NaK_jct;
    vars i_NaK_SL and i_NaK_SL;
  enddef;
  def map between IKs and Ca_buffer for
    vars Ca_jct and Ca_jct;
    vars Ca_SL and Ca_SL;
  enddef;
  def map between IKs and Na_buffer for
    vars Nai and Nai;
    vars Na_jct and Na_jct;
    vars Na_SL and Na_SL;
  enddef;
  def map between ICaL and Ca_buffer for
    vars Cai and Cai;
    vars Ca_SL and Ca_SL;
    vars Ca_jct and Ca_jct;
    vars i_CaL_Ca_jct and i_CaL_Ca_jct;
    vars i_CaL_Ca_SL and i_CaL_Ca_SL;
  enddef;
  def map between ICaL and Na_buffer for
    vars Na_SL and Na_SL;
    vars Na_jct and Na_jct;
    vars i_CaL_Na_jct and i_CaL_Na_jct;
    vars i_CaL_Na_SL and i_CaL_Na_SL;
  enddef;
  def map between INaCa and Ca_buffer for
    vars Cai and Cai;
    vars Ca_SL and Ca_SL;
    vars Ca_jct and Ca_jct;
    vars i_NaCa_jct and i_NaCa_jct;
    vars i_NaCa_SL and i_NaCa_SL;
  enddef;
  def map between INaCa and Na_buffer for
    vars Nai and Nai;
    vars Na_SL and Na_SL;
    vars Na_jct and Na_jct;
    vars i_NaCa_jct and i_NaCa_jct;
    vars i_NaCa_SL and i_NaCa_SL;
  enddef;
  def map between INa and Na_buffer for
    vars i_Na_jct and i_Na_jct;
    vars i_Na_SL and i_Na_SL;
  enddef;
  def map between INab and Na_buffer for
    vars i_Nab_jct and i_Nab_jct;
    vars i_Nab_SL and i_Nab_SL;
  enddef;
  def map between ICab and Ca_buffer for
    vars i_Cab_jct and i_Cab_jct;
    vars i_Cab_SL and i_Cab_SL;
  enddef;
  def map between Jpump_SR and Ca_buffer for
    vars Cai and Cai;
    vars Ca_SR and Ca_SR;
    vars j_pump_SR and j_pump_SR;
  enddef;
  def map between ICap and Ca_buffer for
    vars Cai and Cai;
    vars Ca_SL and Ca_SL;
    vars Ca_jct and Ca_jct;
    vars i_Cap_jct and i_Cap_jct;
    vars i_Cap_SL and i_Cap_SL;
  enddef;
  def map between Jrel_SR and Ca_buffer for
    vars Ca_jct and Ca_jct;
    vars Ca_SR and Ca_SR;
    vars j_rel_SR and j_rel_SR;
  enddef;
  def map between Jleak_SR and Ca_buffer for
    vars Ca_jct and Ca_jct;
    vars Ca_SR and Ca_SR;
    vars j_leak_SR and j_leak_SR;
  enddef;
  def map between indo_fluo_Ca_buffer_not_connected and Ca_buffer for
    vars Cai and Cai;
    vars Ca_SL and Ca_SL;
    vars Ca_jct and Ca_jct;
    vars time and time;
    vars Vol_SL and Vol_SL;
    vars Vol_jct and Vol_jct;
    vars Vol_cytosol and Vol_cytosol;
  enddef;
  def map between cytosolic_Ca_buffer and Ca_buffer for
    vars Cai and Cai;
    vars Mgi and Mgi;
    vars time and time;
    vars dCa_cytosol_tot_bound and dCa_cytosol_tot_bound;
  enddef;
enddef;
// rdf:#0f3d6ae4-e7dd-424a-881b-db8af04857c1
// W3CDTF: 2007-12-03T07:29:30+13:00
// rdf:#423eb95b-74d2-42d8-a183-a8ad217c671a
// Given: Penny
// Family: Noble
// rdf:#0dfc6cfe-43b3-4e58-ad05-cad51673a813
// value: Fixed all warnings in COR.
