// creator: Family Lim; Given Jeelean; jlim063@aucklanduni.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-01-05
// title: Analysis of a generic model of eukaryotic cell-cycle regulation: budding yeast taken from the original model code
// bio_entity: budding yeast
// reference: subject_type keyword; cell cycle
// reference: Pubmed_id 16581849; Family Csikasz-Nagy; Given A; Family Battogtokh; Given D; Family Chen; Given K; Other C; Family Novak; Given B; Family Tyson; Given J; Other J; title Analysis of a generic model of eukaryotic cell-cycle regulation; W3CDTF 2006-06-15; title Biophysical Journal; volume 90; first_page 4361; last_page 4379
def model csikasz_nagy_2006 as
  // Analysis of a Generic Model of Eukaryotic Cell-Cycle Regulation
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model represents the budding yeast model taken from the original model code. This CellML model represents the budding yeast model taken from the original published paper. The model runs in both PCEnv and COR but does not replicate the published results. This may be because of the cell division event which we are currently unable to express in CellML. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: We propose a protein interaction network for the regulation of DNA synthesis and mitosis that emphasizes the universality of the regulatory system among eukaryotic cells. The idiosyncrasies of cell cycle regulation in particular organisms can be attributed, we claim, to specific settings of rate constants in the dynamic network of chemical reactions. The values of these rate constants are determined ultimately by the genetic makeup of an organism. To support these claims, we convert the reaction mechanism into a set of governing kinetic equations and provide parameter values (specific to budding yeast, fission yeast, frog eggs, and mammalian cells) that account for many curious features of cell cycle regulation in these organisms. Using one-parameter bifurcation diagrams, we show how overall cell growth drives progression through the cell cycle, how cell-size homeostasis can be achieved by two different strategies, and how mutations remodel bifurcation diagrams and create unusual cell-division phenotypes. The relation between gene dosage and phenotype can be summarized compactly in two-parameter bifurcation diagrams. Our approach provides a theoretical framework in which to understand both the universality and particularity of cell cycle regulation, and to construct, in modular fashion, increasingly complex models of the networks controlling cell growth and division.
  //
  // The original paper reference is cited below:
  //
  // Analysis of a Generic Model of Eukaryotic Cell-Cycle Regulation, Attila Csikasz-Nagy, Dorjsuren Battogtokh, Katherine C. Chen, Bela Novak, and John J. Tyson, 2006, Biophysical Journal, 90, 4361-4379. PubMed ID: 16581849 (http://www.ncbi.nlm.nih.gov/pubmed/16581849)
  //
  // reaction diagram
  //
  // Wiring diagram of the generic cell-cycle regulatory network. Chemical reactions (solid lines), regulatory effects (dashed lines); a protein sitting on a reaction arrow represents an enzyme catalyst of the reaction. Regulatory modules of the system are distinguished by shaded backgrounds: (1) exit of M module, (2) Cdh1 module, (3) CycB transcription factor, (4) CycB synthesis/degradation, (5) G2 module, (6) CycB inhibition by CKI (also includes the binding of phosphorylated CycB, if that is present), (7) CKI transcription factor, (8) CKI synthesis/ degradation, (9) CycE inhibition by CKI, (10) CycE synthesis/degradation, (11) CycE/A transcription factor, (12) CycA inhibition by CKI, (13) CycA synthesis/degradation. An asterisk by the name represents active form of regulated protein; gray rectangles behind cyclins represent their Cdk partners. It is assumed that all Cdk subunits are present in constant, excess amounts.
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp CycA as
    var CycA: dimensionless {init: 0.09450308233499527, pub: out};
    var k_assa: first_order_rate_constant {pub: in};
    var k_dissa: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var V_sa: first_order_rate_constant {pub: in};
    var V_da: first_order_rate_constant {pub: in};
    var Tri_A: dimensionless {pub: in};
    var CKI: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(CycA, time) = k_dissa*Tri_A+V_di*Tri_A+V_sa-V_da*CycA-k_assa*CKI*CycA;
  enddef;

  def comp CycB as
    var CycB: dimensionless {init: 0.1903585940599442, pub: out};
    var k_assb: first_order_rate_constant {pub: in};
    var k_dissb: first_order_rate_constant {pub: in};
    var V_sb: first_order_rate_constant {pub: in};
    var V_db: first_order_rate_constant {pub: in};
    var V_25: first_order_rate_constant {pub: in};
    var V_wee: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var pB: dimensionless {pub: in};
    var CKI: dimensionless {pub: in};
    var BCKI: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(CycB, time) = V_sb-V_db*CycB+V_25*pB-V_wee*CycB-k_assb*CycB*CKI+k_dissb*BCKI+V_di*BCKI;
  enddef;

  def comp CycE as
    var CycE: dimensionless {init: 0.2092024385929108, pub: out};
    var k_disse: first_order_rate_constant {pub: in};
    var k_asse: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var V_se: first_order_rate_constant {pub: in};
    var V_de: first_order_rate_constant {pub: in};
    var Tri_E: dimensionless {pub: in};
    var CKI: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(CycE, time) = k_disse*Tri_E+V_di*Tri_E+V_se-V_de*CycE-k_asse*CKI*CycE;
  enddef;

  def comp CycD as
    var CycD: dimensionless {pub: out};
    var CycD_0: dimensionless {init: 0.108};
    var mass: dimensionless {pub: in};
    CycD = CycD_0*mass;
  enddef;

  def comp Cdc20_A as
    var Cdc20_A: dimensionless {init: 0.3572723865509033, pub: out};
    var k_a20: first_order_rate_constant {pub: in};
    var k_i20: first_order_rate_constant {pub: in};
    var k_d20: first_order_rate_constant {pub: in};
    var APCP: dimensionless {pub: in};
    var Cdc20_i: dimensionless {pub: in};
    var J_a20: dimensionless {init: 1};
    var J_i20: dimensionless {init: 1};
    var time: minute {pub: in};
    ode(Cdc20_A, time) = k_a20*APCP*Cdc20_i/(J_a20+Cdc20_i)-Cdc20_A*k_i20/(J_i20+Cdc20_A)-Cdc20_A*k_d20;
  enddef;

  def comp Cdc20_i as
    var Cdc20_i: dimensionless {init: 0.7702387571334839, pub: out};
    var Cdc20_A: dimensionless {pub: in};
    var k_a20: first_order_rate_constant {pub: in};
    var k_i20: first_order_rate_constant {pub: in};
    var k_d20: first_order_rate_constant {pub: in};
    var k_s20p: first_order_rate_constant {pub: in};
    var k_s20pp: first_order_rate_constant {pub: in};
    var CycB: dimensionless {pub: in};
    var APCP: dimensionless {pub: in};
    var n20: dimensionless {init: 1};
    var J_20: dimensionless {init: 10};
    var J_a20: dimensionless {init: 1};
    var J_i20: dimensionless {init: 1};
    var time: minute {pub: in};
    ode(Cdc20_i, time) = (k_s20p+k_s20pp*pow(CycB, n20))/(pow(J_20, n20)+pow(CycB, n20))+Cdc20_A*k_i20/(J_i20+Cdc20_A)-k_d20*Cdc20_i-k_a20*APCP*Cdc20_i/(J_a20+Cdc20_i);
  enddef;

  def comp APC as
    var APC: dimensionless {pub: out};
    var APCP: dimensionless {pub: in};
    var APC_T: dimensionless {init: 1};
    APC = (APC_T-APCP)/1{dimensionless};
  enddef;

  def comp APCP as
    var APCP: dimensionless {init: 0.07591402530670166, pub: out};
    var k_aie: first_order_rate_constant {pub: in};
    var k_iie: first_order_rate_constant {pub: in};
    var CycB: dimensionless {pub: in};
    var APC: dimensionless {pub: in};
    var J_aie: dimensionless {init: 0.1};
    var J_iie: dimensionless {init: 0.1};
    var time: minute {pub: in};
    ode(APCP, time) = k_aie*CycB*APC/(J_aie+APC)-k_iie*APCP/(J_iie+APCP);
  enddef;

  def comp pB as
    var pB: dimensionless {init: 0.01234426256269217, pub: out};
    var k_assb: first_order_rate_constant {pub: in};
    var k_dissb: first_order_rate_constant {pub: in};
    var V_wee: first_order_rate_constant {pub: in};
    var V_25: first_order_rate_constant {pub: in};
    var V_db: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var CycB: dimensionless {pub: in};
    var CKI: dimensionless {pub: in};
    var pBCKI: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(pB, time) = V_wee*CycB-V_db*pB-k_assb*pB*CKI+k_dissb*pBCKI+V_di*pBCKI-V_25*pB;
  enddef;

  def comp BCKI as
    var BCKI: dimensionless {init: 0.679449200630188, pub: out};
    var k_assb: first_order_rate_constant {pub: in};
    var k_dissb: first_order_rate_constant {pub: in};
    var V_wee: first_order_rate_constant {pub: in};
    var V_25: first_order_rate_constant {pub: in};
    var V_db: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var CycB: dimensionless {pub: in};
    var CKI: dimensionless {pub: in};
    var pBCKI: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(BCKI, time) = k_assb*CycB*CKI-k_dissb*BCKI+V_25*pBCKI-V_wee*BCKI-V_db*BCKI-V_di*BCKI;
  enddef;

  def comp pBCKI as
    var pBCKI: dimensionless {init: 0.04795938357710838, pub: out};
    var k_assb: first_order_rate_constant {pub: in};
    var k_dissb: first_order_rate_constant {pub: in};
    var V_wee: first_order_rate_constant {pub: in};
    var V_25: first_order_rate_constant {pub: in};
    var V_db: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var pB: dimensionless {pub: in};
    var CKI: dimensionless {pub: in};
    var BCKI: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(pBCKI, time) = k_assb*pB*CKI-k_dissb*pBCKI-V_25*pBCKI+V_wee*BCKI-V_db*pBCKI-V_di*pBCKI;
  enddef;

  def comp Tri_A as
    var Tri_A: dimensionless {init: 0.3492224216461182, pub: out};
    var k_assa: first_order_rate_constant {pub: in};
    var k_dissa: first_order_rate_constant {pub: in};
    var CycA: dimensionless {pub: in};
    var CKI: dimensionless {pub: in};
    var V_da: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Tri_A, time) = k_assa*CKI*CycA-k_dissa*Tri_A-V_di*Tri_A-V_da*Tri_A;
  enddef;

  def comp Tri_E as
    var Tri_E: dimensionless {init: 0, pub: out};
    var k_asse: first_order_rate_constant {pub: in};
    var k_disse: first_order_rate_constant {pub: in};
    var CycE: dimensionless {pub: in};
    var CKI: dimensionless {pub: in};
    var V_de: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Tri_E, time) = k_asse*CKI*CycE-k_disse*Tri_E-V_di*Tri_E-V_de*Tri_E;
  enddef;

  def comp CKI as
    var CKI: dimensionless {init: 0.02882070094347, pub: out};
    var k_assb: first_order_rate_constant {pub: in};
    var k_dissb: first_order_rate_constant {pub: in};
    var k_assa: first_order_rate_constant {pub: in};
    var k_dissa: first_order_rate_constant {pub: in};
    var k_asse: first_order_rate_constant {pub: in};
    var k_disse: first_order_rate_constant {pub: in};
    var V_db: first_order_rate_constant {pub: in};
    var V_si: first_order_rate_constant {pub: in};
    var V_da: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var V_de: first_order_rate_constant {pub: in};
    var CycB: dimensionless {pub: in};
    var BCKI: dimensionless {pub: in};
    var pB: dimensionless {pub: in};
    var Tri_E: dimensionless {pub: in};
    var pBCKI: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var Tri_A: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(CKI, time) = -k_assb*CycB*CKI+k_dissb*BCKI-k_assb*pB*CKI+k_dissb*pBCKI+V_db*BCKI+V_db*pBCKI+V_si-V_di*CKI-k_assa*CKI*CycA+k_dissa*Tri_A+V_da*Tri_A-k_asse*CKI*CycE+k_disse*Tri_E+V_de*Tri_E;
  enddef;

  def comp Cdh1_i as
    var Cdh1_i: dimensionless {pub: out};
    var Cdh1_T: dimensionless {init: 1};
    var Cdh1: dimensionless {pub: in};
    Cdh1_i = (Cdh1_T-Cdh1)/1{dimensionless};
  enddef;

  def comp Cdh1 as
    var Cdh1: dimensionless {init: 0.7189393639564514, pub: out};
    var V_ah1: first_order_rate_constant {pub: in};
    var V_ih1: first_order_rate_constant {pub: in};
    var Cdh1_i: dimensionless {pub: in};
    var J_ah1: dimensionless {init: 0.03};
    var J_ih1: dimensionless {init: 0.03};
    var time: minute {pub: in};
    ode(Cdh1, time) = Cdh1_i*V_ah1/(J_ah1+Cdh1_i)-Cdh1*V_ih1/(J_ih1+Cdh1);
  enddef;

  def comp mass as
    var mass: dimensionless {init: 1.338267803192139, pub: out};
    var mu: first_order_rate_constant {init: 0.005776};
    var maxmass: dimensionless {init: 10000};
    var time: minute {pub: in};
    ode(mass, time) = mu*mass*(1{dimensionless}-mass/maxmass);
  enddef;

  def comp V_atf as
    var V_atf: first_order_rate_constant {pub: out};
    var k_atfp: first_order_rate_constant {pub: in};
    var k_atfapp: first_order_rate_constant {pub: in};
    var k_atfepp: first_order_rate_constant {pub: in};
    var k_atfdpp: first_order_rate_constant {pub: in};
    var CycA: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var CycD: dimensionless {pub: in};
    V_atf = k_atfp+k_atfapp*CycA+k_atfepp*CycE+k_atfdpp*CycD;
  enddef;

  def comp V_itf as
    var V_itf: first_order_rate_constant {pub: out};
    var k_itfp: first_order_rate_constant {pub: in};
    var k_itfapp: first_order_rate_constant {pub: in};
    var k_itfbpp: first_order_rate_constant {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    V_itf = k_itfp+k_itfapp*CycA+k_itfbpp*CycB;
  enddef;

  def comp TF_E as
    var TF_E: dimensionless {pub: out};
    var V_atf: first_order_rate_constant {pub: in};
    var V_itf: first_order_rate_constant {pub: in};
    var J_itf: dimensionless {init: 0.01};
    var J_atf: dimensionless {init: 0.01};
    TF_E = 2{dimensionless}*V_atf*J_itf/(V_itf-V_atf+J_atf*V_itf+J_itf*V_atf+sqrt(sqr(V_itf-V_atf+J_atf*V_itf+J_itf*V_atf)-4{dimensionless}*(V_itf-V_atf)*J_itf*V_atf));
  enddef;

  def comp V_de as
    var V_de: first_order_rate_constant {pub: out};
    var k_dep: first_order_rate_constant {pub: in};
    var k_deepp: first_order_rate_constant {pub: in};
    var k_deapp: first_order_rate_constant {pub: in};
    var k_debpp: first_order_rate_constant {pub: in};
    var CycA: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    V_de = k_dep+k_deepp*CycE+k_deapp*CycA+k_debpp*CycB;
  enddef;

  def comp V_da as
    var V_da: first_order_rate_constant {pub: out};
    var k_dap: first_order_rate_constant {pub: in};
    var k_dapp: first_order_rate_constant {pub: in};
    var k_dappp: first_order_rate_constant {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    var Cdc20_i: dimensionless {pub: in};
    V_da = k_dap+(k_dapp+k_dappp)*Cdc20_A+k_dappp*Cdc20_i;
  enddef;

  def comp TF_I as
    var TF_I: dimensionless {pub: out};
    var k_afi: first_order_rate_constant {pub: in};
    var k_ifip: first_order_rate_constant {pub: in};
    var k_ifibpp: first_order_rate_constant {pub: in};
    var J_ifi: dimensionless {init: 2};
    var J_afi: dimensionless {init: 1};
    var Cdc14: dimensionless {pub: out};
    var CycB: dimensionless {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    Cdc14 = Cdc20_A;
    TF_I = 2{dimensionless}*k_afi*Cdc14*J_ifi/(k_ifip+k_ifibpp*CycB-k_afi*Cdc14+J_afi*(k_ifip+k_ifibpp*CycB)+J_ifi*k_afi*Cdc14+sqrt(sqr(k_ifip+k_ifibpp*CycB-k_afi*Cdc14+J_afi*(k_ifip+k_ifibpp*CycB)+J_ifi*k_afi*Cdc14)-4{dimensionless}*(k_ifip+k_ifibpp*CycB-k_afi*Cdc14)*J_ifi*k_afi*Cdc14));
  enddef;

  def comp V_ah1 as
    var V_ah1: first_order_rate_constant {pub: out};
    var k_ah1p: first_order_rate_constant {pub: in};
    var k_ah1pp: first_order_rate_constant {pub: in};
    var Cdc14: dimensionless {pub: in};
    V_ah1 = k_ah1p+k_ah1pp*Cdc14;
  enddef;

  def comp V_ih1 as
    var V_ih1: first_order_rate_constant {pub: out};
    var k_ih1p: first_order_rate_constant {pub: in};
    var k_ih1app: first_order_rate_constant {pub: in};
    var k_ih1bpp: first_order_rate_constant {pub: in};
    var k_ih1epp: first_order_rate_constant {pub: in};
    var k_ih1dpp: first_order_rate_constant {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var CycD: dimensionless {pub: in};
    V_ih1 = k_ih1p+k_ih1app*CycA+k_ih1bpp*CycB+k_ih1epp*CycE+k_ih1dpp*CycD;
  enddef;

  def comp V_si as
    var V_si: first_order_rate_constant {pub: out};
    var k_sip: first_order_rate_constant {pub: in};
    var k_sipp: first_order_rate_constant {pub: in};
    var TF_I: dimensionless {pub: in};
    V_si = k_sip+k_sipp*TF_I;
  enddef;

  def comp V_di as
    var V_di: first_order_rate_constant {pub: out};
    var k_dip: first_order_rate_constant {pub: in};
    var k_diapp: first_order_rate_constant {pub: in};
    var k_diepp: first_order_rate_constant {pub: in};
    var k_didpp: first_order_rate_constant {pub: in};
    var k_dibpp: first_order_rate_constant {pub: in};
    var k_14di: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    var CycD: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    V_di = (k_dip+k_diapp*CycA+k_dibpp*CycB+k_diepp*CycE+k_didpp*CycD)/(1{dimensionless}+k_14di*Cdc14);
  enddef;

  def comp preMPF as
    var preMPF: dimensionless {pub: out};
    var pB: dimensionless {pub: in};
    var BCKI: dimensionless {pub: in};
    preMPF = pB+BCKI;
  enddef;

  def comp CycBT as
    var CycBT: dimensionless {pub: out};
    var CycB: dimensionless {pub: in};
    var pB: dimensionless {pub: in};
    var BCKI: dimensionless {pub: in};
    var pBCKI: dimensionless {pub: in};
    CycBT = CycB+pB+BCKI+pBCKI;
  enddef;

  def comp CycAT as
    var CycAT: dimensionless {pub: out};
    var CycA: dimensionless {pub: in};
    var Tri_A: dimensionless {pub: in};
    CycAT = CycA+Tri_A;
  enddef;

  def comp CycET as
    var CycET: dimensionless {pub: out};
    var CycE: dimensionless {pub: in};
    var Tri_E: dimensionless {pub: in};
    CycET = CycE+Tri_E;
  enddef;

  def comp Tri_B as
    var Tri_B: dimensionless {pub: out};
    var BCKI: dimensionless {pub: in};
    var pBCKI: dimensionless {pub: in};
    Tri_B = BCKI+pBCKI;
  enddef;

  def comp CKIT as
    var CKIT: dimensionless {pub: out};
    var CKI: dimensionless {pub: in};
    var BCKI: dimensionless {pub: in};
    var pBCKI: dimensionless {pub: in};
    var Tri_A: dimensionless {pub: in};
    var Tri_E: dimensionless {pub: in};
    CKIT = CKI+BCKI+pBCKI+Tri_A+Tri_E;
  enddef;

  def comp Cdc20_T as
    var Cdc20_T: dimensionless {pub: out};
    var Cdc20_i: dimensionless {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    Cdc20_T = Cdc20_i+Cdc20_A;
  enddef;

  def comp TF_B as
    var TF_B: dimensionless {pub: out};
    var k_afb: first_order_rate_constant {pub: in};
    var k_ifb: first_order_rate_constant {pub: in};
    var J_ifb: dimensionless {init: 0.1};
    var J_afb: dimensionless {init: 0.1};
    var CycB: dimensionless {pub: in};
    TF_B = 2{dimensionless}*k_afb*CycB*J_ifb/(k_ifb-k_afb*CycB+J_afb*k_ifb+J_ifb*k_afb*CycB+sqrt(sqr(k_ifb-k_afb*CycB+J_afb*k_ifb+J_ifb*k_afb*CycB)-4{dimensionless}*(k_ifb-k_afb*CycB)*k_afb*CycB*J_ifb));
  enddef;

  def comp V_sb as
    var V_sb: first_order_rate_constant {pub: out};
    var k_sbp: first_order_rate_constant {pub: in};
    var k_sbpp: first_order_rate_constant {pub: in};
    var TF_B: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    V_sb = mass*(k_sbp+k_sbpp*TF_B);
  enddef;

  def comp V_sa as
    var V_sa: first_order_rate_constant {pub: out};
    var k_sap: first_order_rate_constant {pub: in};
    var k_sapp: first_order_rate_constant {pub: in};
    var TF_E: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    V_sa = mass*(k_sap+k_sapp*TF_E);
  enddef;

  def comp V_se as
    var V_se: first_order_rate_constant {pub: out};
    var k_sep: first_order_rate_constant {pub: in};
    var k_sepp: first_order_rate_constant {pub: in};
    var TF_E: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    V_se = mass*(k_sep+k_sepp*TF_E);
  enddef;

  def comp V_db as
    var V_db: first_order_rate_constant {pub: out};
    var k_dbp: first_order_rate_constant {pub: in};
    var k_dbhpp: first_order_rate_constant {pub: in};
    var k_dbcpp: first_order_rate_constant {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    var Cdh1: dimensionless {pub: in};
    V_db = k_dbp+k_dbhpp*Cdh1+k_dbcpp*Cdc20_A;
  enddef;

  def comp Wee1 as
    var Wee1: dimensionless {pub: out};
    var k_aweep: first_order_rate_constant {pub: in};
    var k_aweepp: first_order_rate_constant {pub: in};
    var k_iweep: first_order_rate_constant {pub: in};
    var k_iweepp: first_order_rate_constant {pub: in};
    var J_iwee: dimensionless {init: 0.05};
    var J_awee: dimensionless {init: 0.05};
    var Cdc14: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    Wee1 = 2{dimensionless}*(k_aweep+k_aweepp*Cdc14)*J_iwee/(k_iweep+k_iweepp*CycB-(k_aweep+k_aweepp*Cdc14)+J_awee*(k_iweep+k_iweepp*CycB)+J_iwee*(k_aweep+k_aweepp*Cdc14)+sqrt(sqr(k_iweep+k_iweepp*CycB-(k_aweep+k_aweepp*Cdc14)+J_awee*(k_iweep+k_iweepp*CycB)+J_iwee*(k_aweep+k_aweepp*Cdc14))-4{dimensionless}*(k_iweep+k_iweepp*CycB-(k_aweep+k_aweepp*Cdc14))*(k_aweep+k_aweepp*Cdc14)*J_iwee));
  enddef;

  def comp V_wee as
    var V_wee: first_order_rate_constant {pub: out};
    var k_weep: first_order_rate_constant {pub: in};
    var k_weepp: first_order_rate_constant {pub: in};
    var Wee1: dimensionless {pub: in};
    V_wee = k_weep+k_weepp*Wee1;
  enddef;

  def comp Cdc25 as
    var Cdc25: dimensionless {pub: out};
    var k_a25p: first_order_rate_constant {pub: in};
    var k_a25pp: first_order_rate_constant {pub: in};
    var k_i25p: first_order_rate_constant {pub: in};
    var k_i25pp: first_order_rate_constant {pub: in};
    var J_i25: dimensionless {init: 0.1};
    var J_a25: dimensionless {init: 0.1};
    var Cdc14: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    Cdc25 = 2{dimensionless}*(k_a25p+k_a25pp*CycB)*J_i25/(k_i25p+k_i25pp*Cdc14-(k_a25p+k_a25pp*CycB)+J_a25*(k_i25p+k_i25pp*Cdc14)+(k_a25p+k_a25pp*CycB)*J_i25+sqrt(sqr(k_i25p+k_i25pp*Cdc14-(k_a25p+k_a25pp*CycB)+J_a25*(k_i25p+k_i25pp*Cdc14)+(k_a25p+k_a25pp*CycB)*J_i25)-4{dimensionless}*(k_i25p+k_i25pp*Cdc14-(k_a25p+k_a25pp*CycB))*(k_a25p+k_a25pp*CycB)*J_i25));
  enddef;

  def comp V_25 as
    var V_25: first_order_rate_constant {pub: out};
    var k_25p: first_order_rate_constant {pub: in};
    var k_25pp: first_order_rate_constant {pub: in};
    var Cdc25: dimensionless {pub: in};
    V_25 = k_25p+k_25pp*Cdc25;
  enddef;

  def comp kinetic_parameters as
    var k_25p: first_order_rate_constant {init: 0.01, pub: out};
    var k_25pp: first_order_rate_constant {init: 5, pub: out};
    var k_14di: dimensionless {init: 12, pub: out};
    var k_a20: first_order_rate_constant {init: 1, pub: out};
    var k_a25p: first_order_rate_constant {init: 0, pub: out};
    var k_a25pp: first_order_rate_constant {init: 1, pub: out};
    var k_afb: first_order_rate_constant {init: 1, pub: out};
    var k_afi: first_order_rate_constant {init: 6, pub: out};
    var k_ah1p: first_order_rate_constant {init: 0.02, pub: out};
    var k_ah1pp: first_order_rate_constant {init: 0.8, pub: out};
    var k_aie: first_order_rate_constant {init: 0.1, pub: out};
    var k_assa: first_order_rate_constant {init: 50, pub: out};
    var k_assb: first_order_rate_constant {init: 60, pub: out};
    var k_asse: first_order_rate_constant {init: 0, pub: out};
    var k_atfp: first_order_rate_constant {init: 0, pub: out};
    var k_atfapp: first_order_rate_constant {init: 1.5, pub: out};
    var k_atfdpp: first_order_rate_constant {init: 3, pub: out};
    var k_atfepp: first_order_rate_constant {init: 0.38, pub: out};
    var k_aweep: first_order_rate_constant {init: 0.3, pub: out};
    var k_aweepp: first_order_rate_constant {init: 0, pub: out};
    var k_d20: first_order_rate_constant {init: 0.05, pub: out};
    var k_dap: first_order_rate_constant {init: 0.01, pub: out};
    var k_dapp: first_order_rate_constant {init: 0.16, pub: out};
    var k_dappp: first_order_rate_constant {init: 0, pub: out};
    var k_dbp: first_order_rate_constant {init: 0.003, pub: out};
    var k_dbhpp: first_order_rate_constant {init: 0.4, pub: out};
    var k_dbcpp: first_order_rate_constant {init: 0.15, pub: out};
    var k_dep: first_order_rate_constant {init: 0.12, pub: out};
    var k_deapp: first_order_rate_constant {init: 0, pub: out};
    var k_debpp: first_order_rate_constant {init: 0, pub: out};
    var k_deepp: first_order_rate_constant {init: 0, pub: out};
    var k_dip: first_order_rate_constant {init: 0.02, pub: out};
    var k_diapp: first_order_rate_constant {init: 0.1, pub: out};
    var k_dibpp: first_order_rate_constant {init: 0.8, pub: out};
    var k_didpp: first_order_rate_constant {init: 0.1, pub: out};
    var k_diepp: first_order_rate_constant {init: 0.12, pub: out};
    var k_disse: first_order_rate_constant {init: 0, pub: out};
    var k_dissb: first_order_rate_constant {init: 0.05, pub: out};
    var k_dissa: first_order_rate_constant {init: 0.06, pub: out};
    var k_i20: first_order_rate_constant {init: 0.16, pub: out};
    var k_i25p: first_order_rate_constant {init: 0.3, pub: out};
    var k_i25pp: first_order_rate_constant {init: 0, pub: out};
    var k_ifb: first_order_rate_constant {init: 0.15, pub: out};
    var k_ifip: first_order_rate_constant {init: 0.008, pub: out};
    var k_ifibpp: first_order_rate_constant {init: 0.05, pub: out};
    var k_ih1p: first_order_rate_constant {init: 0.001, pub: out};
    var k_ih1app: first_order_rate_constant {init: 0.35, pub: out};
    var k_ih1bpp: first_order_rate_constant {init: 0.1, pub: out};
    var k_ih1dpp: first_order_rate_constant {init: 0.005, pub: out};
    var k_ih1epp: first_order_rate_constant {init: 0.06, pub: out};
    var k_iie: first_order_rate_constant {init: 0.15, pub: out};
    var k_itfp: first_order_rate_constant {init: 0.75, pub: out};
    var k_itfapp: first_order_rate_constant {init: 0, pub: out};
    var k_itfbpp: first_order_rate_constant {init: 8, pub: out};
    var k_iweep: first_order_rate_constant {init: 0, pub: out};
    var k_iweepp: first_order_rate_constant {init: 1, pub: out};
    var k_s20p: first_order_rate_constant {init: 0.001, pub: out};
    var k_s20pp: first_order_rate_constant {init: 1, pub: out};
    var k_sap: first_order_rate_constant {init: 0.0015, pub: out};
    var k_sapp: first_order_rate_constant {init: 0.01, pub: out};
    var k_sbp: first_order_rate_constant {init: 0.004, pub: out};
    var k_sbpp: first_order_rate_constant {init: 0.04, pub: out};
    var k_sep: first_order_rate_constant {init: 0, pub: out};
    var k_sepp: first_order_rate_constant {init: 0.15, pub: out};
    var k_sip: first_order_rate_constant {init: 0.018, pub: out};
    var k_sipp: first_order_rate_constant {init: 0.18, pub: out};
    var k_weep: first_order_rate_constant {init: 0.02, pub: out};
    var k_weepp: first_order_rate_constant {init: 0.2, pub: out};
  enddef;
  def map between CycA and environment for
    vars time and time;
  enddef;
  def map between CycB and environment for
    vars time and time;
  enddef;
  def map between CycE and environment for
    vars time and time;
  enddef;
  def map between Cdc20_A and environment for
    vars time and time;
  enddef;
  def map between Cdc20_i and environment for
    vars time and time;
  enddef;
  def map between APCP and environment for
    vars time and time;
  enddef;
  def map between pB and environment for
    vars time and time;
  enddef;
  def map between BCKI and environment for
    vars time and time;
  enddef;
  def map between pBCKI and environment for
    vars time and time;
  enddef;
  def map between Tri_A and environment for
    vars time and time;
  enddef;
  def map between Tri_E and environment for
    vars time and time;
  enddef;
  def map between CKI and environment for
    vars time and time;
  enddef;
  def map between Cdh1 and environment for
    vars time and time;
  enddef;
  def map between mass and environment for
    vars time and time;
  enddef;
  def map between CycA and kinetic_parameters for
    vars k_assa and k_assa;
    vars k_dissa and k_dissa;
  enddef;
  def map between CycA and V_da for
    vars V_da and V_da;
  enddef;
  def map between CycA and V_di for
    vars V_di and V_di;
    vars CycA and CycA;
  enddef;
  def map between CycA and V_sa for
    vars V_sa and V_sa;
  enddef;
  def map between CycA and Tri_A for
    vars Tri_A and Tri_A;
    vars CycA and CycA;
  enddef;
  def map between CycA and CKI for
    vars CKI and CKI;
    vars CycA and CycA;
  enddef;
  def map between CycB and kinetic_parameters for
    vars k_assb and k_assb;
    vars k_dissb and k_dissb;
  enddef;
  def map between CycB and V_25 for
    vars V_25 and V_25;
  enddef;
  def map between CycB and V_sb for
    vars V_sb and V_sb;
  enddef;
  def map between CycB and V_db for
    vars V_db and V_db;
  enddef;
  def map between CycB and V_di for
    vars V_di and V_di;
    vars CycB and CycB;
  enddef;
  def map between CycB and V_wee for
    vars V_wee and V_wee;
  enddef;
  def map between CycB and pB for
    vars pB and pB;
    vars CycB and CycB;
  enddef;
  def map between CycB and CKI for
    vars CKI and CKI;
    vars CycB and CycB;
  enddef;
  def map between CycB and BCKI for
    vars BCKI and BCKI;
    vars CycB and CycB;
  enddef;
  def map between CycE and kinetic_parameters for
    vars k_disse and k_disse;
    vars k_asse and k_asse;
  enddef;
  def map between CycE and V_de for
    vars V_de and V_de;
    vars CycE and CycE;
  enddef;
  def map between CycE and V_di for
    vars V_di and V_di;
    vars CycE and CycE;
  enddef;
  def map between CycE and V_se for
    vars V_se and V_se;
  enddef;
  def map between CycE and Tri_E for
    vars Tri_E and Tri_E;
    vars CycE and CycE;
  enddef;
  def map between CycE and CKI for
    vars CKI and CKI;
    vars CycE and CycE;
  enddef;
  def map between CycD and mass for
    vars mass and mass;
  enddef;
  def map between Cdc20_A and kinetic_parameters for
    vars k_a20 and k_a20;
    vars k_i20 and k_i20;
    vars k_d20 and k_d20;
  enddef;
  def map between Cdc20_A and APCP for
    vars APCP and APCP;
  enddef;
  def map between Cdc20_A and Cdc20_i for
    vars Cdc20_i and Cdc20_i;
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between Cdc20_i and kinetic_parameters for
    vars k_a20 and k_a20;
    vars k_i20 and k_i20;
    vars k_s20p and k_s20p;
    vars k_d20 and k_d20;
    vars k_s20pp and k_s20pp;
  enddef;
  def map between Cdc20_i and CycB for
    vars CycB and CycB;
  enddef;
  def map between Cdc20_i and APCP for
    vars APCP and APCP;
  enddef;
  def map between APCP and kinetic_parameters for
    vars k_aie and k_aie;
    vars k_iie and k_iie;
  enddef;
  def map between APCP and CycB for
    vars CycB and CycB;
  enddef;
  def map between APCP and APC for
    vars APCP and APCP;
    vars APC and APC;
  enddef;
  def map between pB and kinetic_parameters for
    vars k_assb and k_assb;
    vars k_dissb and k_dissb;
  enddef;
  def map between pB and V_wee for
    vars V_wee and V_wee;
  enddef;
  def map between pB and V_25 for
    vars V_25 and V_25;
  enddef;
  def map between pB and V_db for
    vars V_db and V_db;
  enddef;
  def map between pB and V_di for
    vars V_di and V_di;
  enddef;
  def map between pB and CKI for
    vars CKI and CKI;
    vars pB and pB;
  enddef;
  def map between pB and pBCKI for
    vars pBCKI and pBCKI;
    vars pB and pB;
  enddef;
  def map between BCKI and kinetic_parameters for
    vars k_assb and k_assb;
    vars k_dissb and k_dissb;
  enddef;
  def map between BCKI and V_wee for
    vars V_wee and V_wee;
  enddef;
  def map between BCKI and V_25 for
    vars V_25 and V_25;
  enddef;
  def map between BCKI and V_db for
    vars V_db and V_db;
  enddef;
  def map between BCKI and V_di for
    vars V_di and V_di;
  enddef;
  def map between BCKI and CKI for
    vars CKI and CKI;
    vars BCKI and BCKI;
  enddef;
  def map between BCKI and pBCKI for
    vars pBCKI and pBCKI;
    vars BCKI and BCKI;
  enddef;
  def map between pBCKI and kinetic_parameters for
    vars k_assb and k_assb;
    vars k_dissb and k_dissb;
  enddef;
  def map between pBCKI and V_wee for
    vars V_wee and V_wee;
  enddef;
  def map between pBCKI and V_25 for
    vars V_25 and V_25;
  enddef;
  def map between pBCKI and V_db for
    vars V_db and V_db;
  enddef;
  def map between pBCKI and V_di for
    vars V_di and V_di;
  enddef;
  def map between pBCKI and CKI for
    vars CKI and CKI;
    vars pBCKI and pBCKI;
  enddef;
  def map between preMPF and pB for
    vars pB and pB;
  enddef;
  def map between preMPF and BCKI for
    vars BCKI and BCKI;
  enddef;
  def map between Tri_A and kinetic_parameters for
    vars k_assa and k_assa;
    vars k_dissa and k_dissa;
  enddef;
  def map between Tri_A and CKI for
    vars CKI and CKI;
    vars Tri_A and Tri_A;
  enddef;
  def map between Tri_A and V_da for
    vars V_da and V_da;
  enddef;
  def map between Tri_A and V_di for
    vars V_di and V_di;
  enddef;
  def map between Tri_E and kinetic_parameters for
    vars k_asse and k_asse;
    vars k_disse and k_disse;
  enddef;
  def map between Tri_E and CKI for
    vars CKI and CKI;
    vars Tri_E and Tri_E;
  enddef;
  def map between Tri_E and V_de for
    vars V_de and V_de;
  enddef;
  def map between Tri_E and V_di for
    vars V_di and V_di;
  enddef;
  def map between Tri_B and BCKI for
    vars BCKI and BCKI;
  enddef;
  def map between Tri_B and pBCKI for
    vars pBCKI and pBCKI;
  enddef;
  def map between CKI and kinetic_parameters for
    vars k_assb and k_assb;
    vars k_dissb and k_dissb;
    vars k_assa and k_assa;
    vars k_dissa and k_dissa;
    vars k_asse and k_asse;
    vars k_disse and k_disse;
  enddef;
  def map between CKI and V_si for
    vars V_si and V_si;
  enddef;
  def map between CKI and V_di for
    vars V_di and V_di;
  enddef;
  def map between CKI and V_db for
    vars V_db and V_db;
  enddef;
  def map between CKI and V_da for
    vars V_da and V_da;
  enddef;
  def map between CKI and V_de for
    vars V_de and V_de;
  enddef;
  def map between Cdh1_i and Cdh1 for
    vars Cdh1_i and Cdh1_i;
    vars Cdh1 and Cdh1;
  enddef;
  def map between Cdh1 and V_ah1 for
    vars V_ah1 and V_ah1;
  enddef;
  def map between Cdh1 and V_ih1 for
    vars V_ih1 and V_ih1;
  enddef;
  def map between V_atf and kinetic_parameters for
    vars k_atfp and k_atfp;
    vars k_atfapp and k_atfapp;
    vars k_atfepp and k_atfepp;
    vars k_atfdpp and k_atfdpp;
  enddef;
  def map between V_atf and CycA for
    vars CycA and CycA;
  enddef;
  def map between V_atf and CycE for
    vars CycE and CycE;
  enddef;
  def map between V_atf and CycD for
    vars CycD and CycD;
  enddef;
  def map between V_itf and kinetic_parameters for
    vars k_itfp and k_itfp;
    vars k_itfapp and k_itfapp;
    vars k_itfbpp and k_itfbpp;
  enddef;
  def map between V_itf and CycA for
    vars CycA and CycA;
  enddef;
  def map between V_itf and CycB for
    vars CycB and CycB;
  enddef;
  def map between TF_E and V_atf for
    vars V_atf and V_atf;
  enddef;
  def map between TF_E and V_itf for
    vars V_itf and V_itf;
  enddef;
  def map between V_de and kinetic_parameters for
    vars k_dep and k_dep;
    vars k_deepp and k_deepp;
    vars k_deapp and k_deapp;
    vars k_debpp and k_debpp;
  enddef;
  def map between V_de and CycA for
    vars CycA and CycA;
  enddef;
  def map between V_de and CycB for
    vars CycB and CycB;
  enddef;
  def map between V_da and kinetic_parameters for
    vars k_dap and k_dap;
    vars k_dapp and k_dapp;
    vars k_dappp and k_dappp;
  enddef;
  def map between V_da and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between V_da and Cdc20_i for
    vars Cdc20_i and Cdc20_i;
  enddef;
  def map between TF_I and kinetic_parameters for
    vars k_afi and k_afi;
    vars k_ifip and k_ifip;
    vars k_ifibpp and k_ifibpp;
  enddef;
  def map between TF_I and CycB for
    vars CycB and CycB;
  enddef;
  def map between TF_I and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between V_ah1 and kinetic_parameters for
    vars k_ah1p and k_ah1p;
    vars k_ah1pp and k_ah1pp;
  enddef;
  def map between V_ah1 and TF_I for
    vars Cdc14 and Cdc14;
  enddef;
  def map between V_ih1 and kinetic_parameters for
    vars k_ih1p and k_ih1p;
    vars k_ih1app and k_ih1app;
    vars k_ih1bpp and k_ih1bpp;
    vars k_ih1epp and k_ih1epp;
    vars k_ih1dpp and k_ih1dpp;
  enddef;
  def map between V_ih1 and CycA for
    vars CycA and CycA;
  enddef;
  def map between V_ih1 and CycB for
    vars CycB and CycB;
  enddef;
  def map between V_ih1 and CycE for
    vars CycE and CycE;
  enddef;
  def map between V_ih1 and CycD for
    vars CycD and CycD;
  enddef;
  def map between V_si and kinetic_parameters for
    vars k_sip and k_sip;
    vars k_sipp and k_sipp;
  enddef;
  def map between V_si and TF_I for
    vars TF_I and TF_I;
  enddef;
  def map between V_di and kinetic_parameters for
    vars k_dip and k_dip;
    vars k_diapp and k_diapp;
    vars k_diepp and k_diepp;
    vars k_didpp and k_didpp;
    vars k_dibpp and k_dibpp;
    vars k_14di and k_14di;
  enddef;
  def map between V_di and CycD for
    vars CycD and CycD;
  enddef;
  def map between V_di and TF_I for
    vars Cdc14 and Cdc14;
  enddef;
  def map between CycBT and CycB for
    vars CycB and CycB;
  enddef;
  def map between CycBT and pB for
    vars pB and pB;
  enddef;
  def map between CycBT and BCKI for
    vars BCKI and BCKI;
  enddef;
  def map between CycBT and pBCKI for
    vars pBCKI and pBCKI;
  enddef;
  def map between CycAT and CycA for
    vars CycA and CycA;
  enddef;
  def map between CycAT and Tri_A for
    vars Tri_A and Tri_A;
  enddef;
  def map between CycET and CycE for
    vars CycE and CycE;
  enddef;
  def map between CycET and Tri_E for
    vars Tri_E and Tri_E;
  enddef;
  def map between CKIT and CKI for
    vars CKI and CKI;
  enddef;
  def map between CKIT and BCKI for
    vars BCKI and BCKI;
  enddef;
  def map between CKIT and pBCKI for
    vars pBCKI and pBCKI;
  enddef;
  def map between CKIT and Tri_A for
    vars Tri_A and Tri_A;
  enddef;
  def map between CKIT and Tri_E for
    vars Tri_E and Tri_E;
  enddef;
  def map between Cdc20_T and Cdc20_i for
    vars Cdc20_i and Cdc20_i;
  enddef;
  def map between Cdc20_T and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between TF_B and kinetic_parameters for
    vars k_afb and k_afb;
    vars k_ifb and k_ifb;
  enddef;
  def map between TF_B and CycB for
    vars CycB and CycB;
  enddef;
  def map between V_sb and kinetic_parameters for
    vars k_sbp and k_sbp;
    vars k_sbpp and k_sbpp;
  enddef;
  def map between V_sb and TF_B for
    vars TF_B and TF_B;
  enddef;
  def map between V_sb and mass for
    vars mass and mass;
  enddef;
  def map between V_sa and kinetic_parameters for
    vars k_sap and k_sap;
    vars k_sapp and k_sapp;
  enddef;
  def map between V_sa and TF_E for
    vars TF_E and TF_E;
  enddef;
  def map between V_sa and mass for
    vars mass and mass;
  enddef;
  def map between V_se and kinetic_parameters for
    vars k_sep and k_sep;
    vars k_sepp and k_sepp;
  enddef;
  def map between V_se and TF_E for
    vars TF_E and TF_E;
  enddef;
  def map between V_se and mass for
    vars mass and mass;
  enddef;
  def map between V_db and kinetic_parameters for
    vars k_dbp and k_dbp;
    vars k_dbhpp and k_dbhpp;
    vars k_dbcpp and k_dbcpp;
  enddef;
  def map between V_db and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between V_db and Cdh1 for
    vars Cdh1 and Cdh1;
  enddef;
  def map between Wee1 and kinetic_parameters for
    vars k_aweep and k_aweep;
    vars k_aweepp and k_aweepp;
    vars k_iweep and k_iweep;
    vars k_iweepp and k_iweepp;
  enddef;
  def map between Wee1 and TF_I for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Wee1 and CycB for
    vars CycB and CycB;
  enddef;
  def map between V_wee and kinetic_parameters for
    vars k_weep and k_weep;
    vars k_weepp and k_weepp;
  enddef;
  def map between V_wee and Wee1 for
    vars Wee1 and Wee1;
  enddef;
  def map between Cdc25 and kinetic_parameters for
    vars k_a25p and k_a25p;
    vars k_a25pp and k_a25pp;
    vars k_i25p and k_i25p;
    vars k_i25pp and k_i25pp;
  enddef;
  def map between Cdc25 and TF_I for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Cdc25 and CycB for
    vars CycB and CycB;
  enddef;
  def map between V_25 and kinetic_parameters for
    vars k_25p and k_25p;
    vars k_25pp and k_25pp;
  enddef;
  def map between V_25 and Cdc25 for
    vars Cdc25 and Cdc25;
  enddef;
enddef;
