// creator: Family Lloyd; Given Catherine; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-01-05
// title: Analysis of a generic model of eukaryotic cell-cycle regulation: budding yeast taken from the published paper
// bio_entity: budding yeast
// reference: subject_type keyword; cell cycle
// reference: Pubmed_id 16581849; Family Csikasz-Nagy; Given A; Family Battogtokh; Given D; Family Chen; Given K; Other C; Family Novak; Given B; Family Tyson; Given J; Other J; title Analysis of a generic model of eukaryotic cell-cycle regulation; W3CDTF 2006-06-15; title Biophysical Journal; volume 90; first_page 4361; last_page 4379
def model csikasz_nagy_2006 as
  // Analysis of a Generic Model of Eukaryotic Cell-Cycle Regulation
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model represents the budding yeast model taken from the original published paper. The model runs in both PCEnv and COR but does not replicate the published results. This may be because of the cell division event which we are currently unable to express in CellML. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: We propose a protein interaction network for the regulation of DNA synthesis and mitosis that emphasizes the universality of the regulatory system among eukaryotic cells. The idiosyncrasies of cell cycle regulation in particular organisms can be attributed, we claim, to specific settings of rate constants in the dynamic network of chemical reactions. The values of these rate constants are determined ultimately by the genetic makeup of an organism. To support these claims, we convert the reaction mechanism into a set of governing kinetic equations and provide parameter values (specific to budding yeast, fission yeast, frog eggs, and mammalian cells) that account for many curious features of cell cycle regulation in these organisms. Using one-parameter bifurcation diagrams, we show how overall cell growth drives progression through the cell cycle, how cell-size homeostasis can be achieved by two different strategies, and how mutations remodel bifurcation diagrams and create unusual cell-division phenotypes. The relation between gene dosage and phenotype can be summarized compactly in two-parameter bifurcation diagrams. Our approach provides a theoretical framework in which to understand both the universality and particularity of cell cycle regulation, and to construct, in modular fashion, increasingly complex models of the networks controlling cell growth and division.
  //
  // The original paper reference is cited below:
  //
  // Analysis of a Generic Model of Eukaryotic Cell-Cycle Regulation, Attila Csikasz-Nagy, Dorjsuren Battogtokh, Katherine C. Chen, Bela Novak, and John J. Tyson, 2006, Biophysical Journal, 90, 4361-4379. PubMed ID: 16581849 (http://www.ncbi.nlm.nih.gov/pubmed/16581849)
  //
  // reaction diagram
  //
  // Wiring diagram of the generic cell-cycle regulatory network. Chemical reactions (solid lines), regulatory effects (dashed lines); a protein sitting on a reaction arrow represents an enzyme catalyst of the reaction. Regulatory modules of the system are distinguished by shaded backgrounds: (1) exit of M module, (2) Cdh1 module, (3) CycB transcription factor, (4) CycB synthesis/degradation, (5) G2 module, (6) CycB inhibition by CKI (also includes the binding of phosphorylated CycB, if that is present), (7) CKI transcription factor, (8) CKI synthesis/ degradation, (9) CycE inhibition by CKI, (10) CycE synthesis/degradation, (11) CycE/A transcription factor, (12) CycA inhibition by CKI, (13) CycA synthesis/degradation. An asterisk by the name represents active form of regulated protein; gray rectangles behind cyclins represent their Cdk partners. It is assumed that all Cdk subunits are present in constant, excess amounts.
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp actCycA as
    var actCycA: dimensionless {init: 0.09450308233499527, pub: out};
    var k_asa: first_order_rate_constant {pub: in};
    var k_sap: first_order_rate_constant {pub: in};
    var k_sapp: first_order_rate_constant {pub: in};
    var k_dia: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var V_da: first_order_rate_constant {pub: in};
    var mass: dimensionless {pub: in};
    var Tri_A: dimensionless {pub: in};
    var TF_E: dimensionless {pub: in};
    var freeCKI: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(actCycA, time) = (k_sap+k_sapp*TF_E)*mass+(V_di+k_dia)*Tri_A-(V_da+k_asa*freeCKI)*actCycA;
  enddef;

  def comp actCycB as
    var actCycB: dimensionless {init: 0.1903585940599442, pub: out};
    var k_asb: first_order_rate_constant {pub: in};
    var k_dib: first_order_rate_constant {pub: in};
    var V_sb: first_order_rate_constant {pub: in};
    var V_db: first_order_rate_constant {pub: in};
    var V_25: first_order_rate_constant {pub: in};
    var V_wee: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var mass: dimensionless {pub: in};
    var CycB: dimensionless {pub: in};
    var freeCKI: dimensionless {pub: in};
    var Tri_B: dimensionless {pub: in};
    var preMPF: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(actCycB, time) = V_sb*mass+V_25*(CycB-(Tri_B+actCycB))+(k_dib+V_di)*(CycB-(preMPF+actCycB))-(V_db+V_wee+k_asb*freeCKI)*actCycB;
  enddef;

  def comp actCycE as
    var actCycE: dimensionless {init: 0.2092024385929108, pub: out};
    var k_die: first_order_rate_constant {pub: in};
    var k_ase: first_order_rate_constant {pub: in};
    var k_sep: first_order_rate_constant {pub: in};
    var k_sepp: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var V_de: first_order_rate_constant {pub: in};
    var Tri_E: dimensionless {pub: in};
    var TF_E: dimensionless {pub: in};
    var freeCKI: dimensionless {pub: in};
    var mass: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(actCycE, time) = (k_sep+k_sepp*TF_E)*mass+(V_di+k_die)*Tri_E-(V_de+k_ase*freeCKI)*actCycE;
  enddef;

  def comp CycA as
    var CycA: dimensionless {init: 0.09450308233499527, pub: out};
    var k_sap: first_order_rate_constant {pub: in};
    var k_sapp: first_order_rate_constant {pub: in};
    var V_da: first_order_rate_constant {pub: in};
    var mass: dimensionless {pub: in};
    var TF_E: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(CycA, time) = (k_sap+k_sapp*TF_E)*mass-V_da*CycA;
  enddef;

  def comp CycB as
    var CycB: dimensionless {init: 0.09450308233499527, pub: out};
    var V_sb: first_order_rate_constant {pub: in};
    var V_db: first_order_rate_constant {pub: in};
    var mass: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(CycB, time) = V_sb*mass-V_db*CycB;
  enddef;

  def comp CycE as
    var CycE: dimensionless {init: 0.09450308233499527, pub: out};
    var k_sep: first_order_rate_constant {pub: in};
    var k_sepp: first_order_rate_constant {pub: in};
    var V_de: first_order_rate_constant {pub: in};
    var mass: dimensionless {pub: in};
    var TF_E: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(CycE, time) = (k_sep+k_sepp*TF_E)*mass-V_de*CycE;
  enddef;

  def comp CycD as
    var CycD: dimensionless {pub: out};
    var CycD_0: dimensionless {init: 0.108};
    var mass: dimensionless {pub: in};
    CycD = CycD_0*mass;
  enddef;

  def comp Cdc20_A as
    var Cdc20_A: dimensionless {init: 0.3572723865509033, pub: out};
    var k_a20: first_order_rate_constant {pub: in};
    var k_i20: first_order_rate_constant {pub: in};
    var k_d20: first_order_rate_constant {pub: in};
    var APCP: dimensionless {pub: in};
    var Cdc20_T: dimensionless {pub: in};
    var J_a20: dimensionless {init: 1};
    var J_i20: dimensionless {init: 1};
    var time: minute {pub: in};
    ode(Cdc20_A, time) = k_a20*APCP*(Cdc20_T-Cdc20_A)/(J_a20+Cdc20_T-Cdc20_A)-(k_i20/(J_i20+Cdc20_A)+k_d20)*Cdc20_A;
  enddef;

  def comp Cdc20_T as
    var Cdc20_T: dimensionless {init: 0.7702387571334839, pub: out};
    var k_d20: first_order_rate_constant {pub: in};
    var k_s20p: first_order_rate_constant {pub: in};
    var k_s20pp: first_order_rate_constant {pub: in};
    var actCycB: dimensionless {pub: in};
    var n: dimensionless {init: 1};
    var J_20: dimensionless {init: 10};
    var time: minute {pub: in};
    ode(Cdc20_T, time) = (k_s20p+k_s20pp*pow(actCycB, n))/(pow(J_20, n)+pow(actCycB, n))-k_d20*Cdc20_T;
  enddef;

  def comp APCP as
    var APCP: dimensionless {init: 0.07591402530670166, pub: out};
    var k_aAPC: first_order_rate_constant {pub: in};
    var k_iAPC: first_order_rate_constant {pub: in};
    var actCycB: dimensionless {pub: in};
    var J_aAPC: dimensionless {init: 0.1};
    var J_iAPC: dimensionless {init: 0.1};
    var time: minute {pub: in};
    ode(APCP, time) = k_aAPC*actCycB*(1{dimensionless}-APCP)/(J_aAPC+1{dimensionless}-APCP)-k_iAPC*APCP/(J_iAPC+APCP);
  enddef;

  def comp Tri_A as
    var Tri_A: dimensionless {pub: out};
    var actCycA: dimensionless {pub: in};
    var CycA: dimensionless {pub: in};
    Tri_A = CycA-actCycA;
  enddef;

  def comp Tri_E as
    var Tri_E: dimensionless {pub: out};
    var actCycE: dimensionless {pub: in};
    var CycE: dimensionless {pub: in};
    Tri_E = CycE-actCycE;
  enddef;

  def comp freeCKI as
    var freeCKI: dimensionless {pub: out};
    var CKI: dimensionless {pub: in};
    var Tri_B: dimensionless {pub: in};
    var Tri_E: dimensionless {pub: in};
    var Tri_A: dimensionless {pub: in};
    freeCKI = CKI-(Tri_B+Tri_A+Tri_E);
  enddef;

  def comp Cdh1 as
    var Cdh1: dimensionless {init: 0.7189393639564514, pub: out};
    var k_ah1p: first_order_rate_constant {pub: in};
    var k_ah1pp: first_order_rate_constant {pub: in};
    var k_ih1p: first_order_rate_constant {pub: in};
    var k_ih1pp: first_order_rate_constant {pub: in};
    var k_ih1ppp: first_order_rate_constant {pub: in};
    var k_ih1pppp: first_order_rate_constant {pub: in};
    var k_ih1ppppp: first_order_rate_constant {pub: in};
    var Cdc14: dimensionless {pub: in};
    var actCycA: dimensionless {pub: in};
    var actCycE: dimensionless {pub: in};
    var actCycB: dimensionless {pub: in};
    var CycD: dimensionless {pub: in};
    var J_ah1: dimensionless {init: 0.03};
    var J_ih1: dimensionless {init: 0.03};
    var time: minute {pub: in};
    ode(Cdh1, time) = (k_ah1p+k_ah1pp*Cdc14)*(1{dimensionless}-Cdh1)/(J_ah1+1{dimensionless}-Cdh1)-(k_ih1p+k_ih1pp*actCycA+k_ih1ppp*actCycB+k_ih1pppp*actCycE+k_ih1ppppp*CycD)*Cdh1/(J_ih1+Cdh1);
  enddef;

  def comp mass as
    var mass: dimensionless {init: 1.338267803192139, pub: out};
    var mu: first_order_rate_constant {init: 0.005776};
    var maxmass: dimensionless {init: 10000};
    var time: minute {pub: in};
    ode(mass, time) = mu*mass*(1{dimensionless}-mass/maxmass);
  enddef;

  def comp V_atf as
    var V_atf: first_order_rate_constant {pub: out};
    var k_atfp: first_order_rate_constant {pub: in};
    var k_atfpp: first_order_rate_constant {pub: in};
    var k_atfppp: first_order_rate_constant {pub: in};
    var k_atfpppp: first_order_rate_constant {pub: in};
    var actCycA: dimensionless {pub: in};
    var actCycE: dimensionless {pub: in};
    var CycD: dimensionless {pub: in};
    V_atf = k_atfp+k_atfpp*actCycA+k_atfppp*actCycE+k_atfpppp*CycD;
  enddef;

  def comp TF_E as
    var TF_E: dimensionless {pub: out};
    var V_atf: first_order_rate_constant {pub: in};
    var k_itfp: first_order_rate_constant {pub: in};
    var k_itfpp: first_order_rate_constant {pub: in};
    var k_itfppp: first_order_rate_constant {pub: in};
    var actCycA: dimensionless {pub: in};
    var actCycB: dimensionless {pub: in};
    var J_itf: dimensionless {init: 0.01};
    var J_atf: dimensionless {init: 0.01};
    var A1: first_order_rate_constant;
    var A2: first_order_rate_constant;
    var A3: dimensionless;
    var A4: dimensionless;
    A1 = V_atf;
    A2 = k_itfp+k_itfpp*actCycB+k_itfppp*actCycA;
    A3 = J_atf;
    A4 = J_itf;
    TF_E = 2{dimensionless}*A4*A1/(A2+(-A1)+A3*A2+A4*A1+sqrt(sqr(A2+(-A1)+A3*A2+A4*A1)-4{dimensionless}*(A2-A1)*A4*A1));
  enddef;

  def comp V_de as
    var V_de: first_order_rate_constant {pub: out};
    var k_dep: first_order_rate_constant {pub: in};
    var k_depp: first_order_rate_constant {pub: in};
    var k_deppp: first_order_rate_constant {pub: in};
    var k_depppp: first_order_rate_constant {pub: in};
    var actCycA: dimensionless {pub: in};
    var actCycE: dimensionless {pub: in};
    var actCycB: dimensionless {pub: in};
    V_de = k_dep+k_depp*actCycE+k_deppp*actCycA+k_depppp*actCycB;
  enddef;

  def comp V_da as
    var V_da: first_order_rate_constant {pub: out};
    var k_dap: first_order_rate_constant {pub: in};
    var k_dapp: first_order_rate_constant {pub: in};
    var k_dappp: first_order_rate_constant {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    var Cdc20_T: dimensionless {pub: in};
    V_da = k_dap+k_dapp*Cdc20_A+k_dappp*Cdc20_T;
  enddef;

  def comp TF_I as
    var TF_I: dimensionless {pub: out};
    var Cdc14: dimensionless {pub: out};
    var actCycB: dimensionless {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    var k_afi: first_order_rate_constant {pub: in};
    var k_ifip: first_order_rate_constant {pub: in};
    var k_ifipp: first_order_rate_constant {pub: in};
    var J_ifi: dimensionless {init: 2};
    var J_afi: dimensionless {init: 1};
    var A1: first_order_rate_constant;
    var A2: first_order_rate_constant;
    var A3: dimensionless;
    var A4: dimensionless;
    A1 = k_afi*Cdc14;
    A2 = k_ifip+k_ifipp*actCycB;
    A3 = J_afi;
    A4 = J_ifi;
    Cdc14 = Cdc20_A;
    TF_I = 2{dimensionless}*A4*A1/(A2+(-A1)+A3*A2+A4*A1+sqrt(sqr(A2+(-A1)+A3*A2+A4*A1)-4{dimensionless}*(A2-A1)*A4*A1));
  enddef;

  def comp V_si as
    var V_si: first_order_rate_constant {pub: out};
    var k_sip: first_order_rate_constant {pub: in};
    var k_sipp: first_order_rate_constant {pub: in};
    var TF_I: dimensionless {pub: in};
    V_si = k_sip+k_sipp*TF_I;
  enddef;

  def comp V_di as
    var V_di: first_order_rate_constant {pub: out};
    var k_dip: first_order_rate_constant {pub: in};
    var k_dipp: first_order_rate_constant {pub: in};
    var k_dippp: first_order_rate_constant {pub: in};
    var k_dipppp: first_order_rate_constant {pub: in};
    var k_dippppp: first_order_rate_constant {pub: in};
    var J_14di: dimensionless {pub: in};
    var actCycA: dimensionless {pub: in};
    var actCycB: dimensionless {pub: in};
    var actCycE: dimensionless {pub: in};
    var CycD: dimensionless {pub: in};
    var Cdc14: dimensionless {pub: in};
    V_di = (k_dip+k_dipp*actCycA+k_dippp*actCycB+k_dipppp*actCycE+k_dippppp*CycD)/(1{dimensionless}+Cdc14/J_14di);
  enddef;

  def comp preMPF as
    var preMPF: dimensionless {init: 0.01, pub: out};
    var V_wee: first_order_rate_constant {pub: in};
    var V_25: first_order_rate_constant {pub: in};
    var V_db: first_order_rate_constant {pub: in};
    var CycB: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(preMPF, time) = V_wee*(CycB-preMPF)-(V_25+V_db)*preMPF;
  enddef;

  def comp Tri_B as
    var Tri_B: dimensionless {init: 0.01, pub: out};
    var k_asb: first_order_rate_constant {pub: in};
    var k_dib: first_order_rate_constant {pub: in};
    var V_di: first_order_rate_constant {pub: in};
    var V_db: first_order_rate_constant {pub: in};
    var CycB: dimensionless {pub: in};
    var freeCKI: dimensionless {pub: in};
    var time: minute {pub: in};
    ode(Tri_B, time) = k_asb*(CycB-Tri_B)*freeCKI-(k_dib+V_db+V_di)*Tri_B;
  enddef;

  def comp CKI as
    var CKI: dimensionless {init: 0.01, pub: out};
    var V_di: first_order_rate_constant {pub: in};
    var V_si: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(CKI, time) = V_si-V_di*CKI;
  enddef;

  def comp TF_B as
    var TF_B: dimensionless {pub: out};
    var k_afb: first_order_rate_constant {pub: in};
    var k_ifb: first_order_rate_constant {pub: in};
    var J_ifb: dimensionless {init: 0.1};
    var J_afb: dimensionless {init: 0.1};
    var actCycB: dimensionless {pub: in};
    var A1: first_order_rate_constant;
    var A2: first_order_rate_constant;
    var A3: dimensionless;
    var A4: dimensionless;
    A1 = k_afb*actCycB;
    A2 = k_ifb;
    A3 = J_afb;
    A4 = J_ifb;
    TF_B = 2{dimensionless}*A4*A1/(A2+(-A1)+A3*A2+A4*A1+sqrt(sqr(A2+(-A1)+A3*A2+A4*A1)-4{dimensionless}*(A2-A1)*A4*A1));
  enddef;

  def comp V_sb as
    var V_sb: first_order_rate_constant {pub: out};
    var k_sbp: first_order_rate_constant {pub: in};
    var k_sbpp: first_order_rate_constant {pub: in};
    var TF_B: dimensionless {pub: in};
    V_sb = k_sbp+k_sbpp*TF_B;
  enddef;

  def comp V_db as
    var V_db: first_order_rate_constant {pub: out};
    var k_dbp: first_order_rate_constant {pub: in};
    var k_dbpp: first_order_rate_constant {pub: in};
    var k_dbppp: first_order_rate_constant {pub: in};
    var Cdc20_A: dimensionless {pub: in};
    var Cdh1: dimensionless {pub: in};
    V_db = k_dbp+k_dbpp*Cdh1+k_dbppp*Cdc20_A;
  enddef;

  def comp Wee1 as
    var Wee1: dimensionless {pub: out};
    var k_aweep: first_order_rate_constant {pub: in};
    var k_aweepp: first_order_rate_constant {pub: in};
    var k_iwee: first_order_rate_constant {pub: in};
    var J_iwee: dimensionless {init: 0.05};
    var J_awee: dimensionless {init: 0.05};
    var Cdc14: dimensionless {pub: in};
    var actCycB: dimensionless {pub: in};
    var A1: first_order_rate_constant;
    var A2: first_order_rate_constant;
    var A3: dimensionless;
    var A4: dimensionless;
    A1 = k_aweep+k_aweepp*Cdc14;
    A2 = k_iwee*actCycB;
    A3 = J_awee;
    A4 = J_iwee;
    Wee1 = 2{dimensionless}*A4*A1/(A2+(-A1)+A3*A2+A4*A1+sqrt(sqr(A2+(-A1)+A3*A2+A4*A1)-4{dimensionless}*(A2-A1)*A4*A1));
  enddef;

  def comp V_wee as
    var V_wee: first_order_rate_constant {pub: out};
    var k_weep: first_order_rate_constant {pub: in};
    var k_weepp: first_order_rate_constant {pub: in};
    var Wee1: dimensionless {pub: in};
    V_wee = k_weep+k_weepp*Wee1;
  enddef;

  def comp Cdc25 as
    var Cdc25: dimensionless {pub: out};
    var k_a25: first_order_rate_constant {pub: in};
    var k_i25p: first_order_rate_constant {pub: in};
    var k_i25pp: first_order_rate_constant {pub: in};
    var J_i25: dimensionless {init: 0.1};
    var J_a25: dimensionless {init: 0.1};
    var Cdc14: dimensionless {pub: in};
    var actCycB: dimensionless {pub: in};
    var A1: first_order_rate_constant;
    var A2: first_order_rate_constant;
    var A3: dimensionless;
    var A4: dimensionless;
    A1 = k_a25*actCycB;
    A2 = k_i25p+k_i25pp*Cdc14;
    A3 = J_a25;
    A4 = J_i25;
    Cdc25 = 2{dimensionless}*A4*A1/(A2+(-A1)+A3*A2+A4*A1+sqrt(sqr(A2+(-A1)+A3*A2+A4*A1)-4{dimensionless}*(A2-A1)*A4*A1));
  enddef;

  def comp V_25 as
    var V_25: first_order_rate_constant {pub: out};
    var k_25p: first_order_rate_constant {pub: in};
    var k_25pp: first_order_rate_constant {pub: in};
    var Cdc25: dimensionless {pub: in};
    V_25 = k_25p+k_25pp*Cdc25;
  enddef;

  def comp kinetic_parameters as
    var k_25p: first_order_rate_constant {init: 0.01, pub: out};
    var k_25pp: first_order_rate_constant {init: 5, pub: out};
    var J_14di: dimensionless {init: 12, pub: out};
    var k_a20: first_order_rate_constant {init: 1, pub: out};
    var k_a25: first_order_rate_constant {init: 0, pub: out};
    var k_afb: first_order_rate_constant {init: 1, pub: out};
    var k_afi: first_order_rate_constant {init: 6, pub: out};
    var k_ah1p: first_order_rate_constant {init: 0.02, pub: out};
    var k_ah1pp: first_order_rate_constant {init: 0.8, pub: out};
    var k_aAPC: first_order_rate_constant {init: 0.1, pub: out};
    var k_asa: first_order_rate_constant {init: 50, pub: out};
    var k_asb: first_order_rate_constant {init: 60, pub: out};
    var k_ase: first_order_rate_constant {init: 0, pub: out};
    var k_atfp: first_order_rate_constant {init: 0, pub: out};
    var k_atfpp: first_order_rate_constant {init: 1.5, pub: out};
    var k_atfpppp: first_order_rate_constant {init: 3, pub: out};
    var k_atfppp: first_order_rate_constant {init: 0.38, pub: out};
    var k_aweep: first_order_rate_constant {init: 0.3, pub: out};
    var k_aweepp: first_order_rate_constant {init: 0, pub: out};
    var k_d20: first_order_rate_constant {init: 0.05, pub: out};
    var k_dap: first_order_rate_constant {init: 0.01, pub: out};
    var k_dapp: first_order_rate_constant {init: 0.16, pub: out};
    var k_dappp: first_order_rate_constant {init: 0, pub: out};
    var k_dbp: first_order_rate_constant {init: 0.003, pub: out};
    var k_dbpp: first_order_rate_constant {init: 0.4, pub: out};
    var k_dbppp: first_order_rate_constant {init: 0.15, pub: out};
    var k_dep: first_order_rate_constant {init: 0.12, pub: out};
    var k_deppp: first_order_rate_constant {init: 0, pub: out};
    var k_depppp: first_order_rate_constant {init: 0, pub: out};
    var k_depp: first_order_rate_constant {init: 0, pub: out};
    var k_dip: first_order_rate_constant {init: 0.02, pub: out};
    var k_dipp: first_order_rate_constant {init: 0.1, pub: out};
    var k_dippp: first_order_rate_constant {init: 0.8, pub: out};
    var k_dippppp: first_order_rate_constant {init: 0.1, pub: out};
    var k_dipppp: first_order_rate_constant {init: 0.12, pub: out};
    var k_die: first_order_rate_constant {init: 0, pub: out};
    var k_dib: first_order_rate_constant {init: 0.05, pub: out};
    var k_dia: first_order_rate_constant {init: 0.06, pub: out};
    var k_i20: first_order_rate_constant {init: 0.16, pub: out};
    var k_i25p: first_order_rate_constant {init: 0.3, pub: out};
    var k_i25pp: first_order_rate_constant {init: 0, pub: out};
    var k_itfp: first_order_rate_constant {init: 0.75, pub: out};
    var k_itfppp: first_order_rate_constant {init: 0, pub: out};
    var k_itfpp: first_order_rate_constant {init: 8, pub: out};
    var k_ifb: first_order_rate_constant {init: 0.15, pub: out};
    var k_ifip: first_order_rate_constant {init: 0.008, pub: out};
    var k_ifipp: first_order_rate_constant {init: 0.05, pub: out};
    var k_ih1p: first_order_rate_constant {init: 0.001, pub: out};
    var k_ih1pp: first_order_rate_constant {init: 0.35, pub: out};
    var k_ih1ppp: first_order_rate_constant {init: 0.1, pub: out};
    var k_ih1ppppp: first_order_rate_constant {init: 0.005, pub: out};
    var k_ih1pppp: first_order_rate_constant {init: 0.06, pub: out};
    var k_iAPC: first_order_rate_constant {init: 0.15, pub: out};
    var k_s20p: first_order_rate_constant {init: 0.001, pub: out};
    var k_s20pp: first_order_rate_constant {init: 1, pub: out};
    var k_sbp: first_order_rate_constant {init: 0.004, pub: out};
    var k_sbpp: first_order_rate_constant {init: 0.04, pub: out};
    var k_sip: first_order_rate_constant {init: 0.018, pub: out};
    var k_sipp: first_order_rate_constant {init: 0.18, pub: out};
    var k_iwee: first_order_rate_constant {init: 1, pub: out};
    var k_weep: first_order_rate_constant {init: 0.02, pub: out};
    var k_weepp: first_order_rate_constant {init: 0.2, pub: out};
    var k_sap: first_order_rate_constant {init: 0.0015, pub: out};
    var k_sapp: first_order_rate_constant {init: 0.01, pub: out};
    var k_sep: first_order_rate_constant {init: 0, pub: out};
    var k_sepp: first_order_rate_constant {init: 0.15, pub: out};
  enddef;
  def map between actCycA and environment for
    vars time and time;
  enddef;
  def map between actCycB and environment for
    vars time and time;
  enddef;
  def map between actCycE and environment for
    vars time and time;
  enddef;
  def map between CycA and environment for
    vars time and time;
  enddef;
  def map between CycB and environment for
    vars time and time;
  enddef;
  def map between CycE and environment for
    vars time and time;
  enddef;
  def map between Cdc20_A and environment for
    vars time and time;
  enddef;
  def map between Cdc20_T and environment for
    vars time and time;
  enddef;
  def map between APCP and environment for
    vars time and time;
  enddef;
  def map between CKI and environment for
    vars time and time;
  enddef;
  def map between Cdh1 and environment for
    vars time and time;
  enddef;
  def map between mass and environment for
    vars time and time;
  enddef;
  def map between preMPF and environment for
    vars time and time;
  enddef;
  def map between Tri_B and environment for
    vars time and time;
  enddef;
  def map between actCycA and kinetic_parameters for
    vars k_asa and k_asa;
    vars k_dia and k_dia;
    vars k_sap and k_sap;
    vars k_sapp and k_sapp;
  enddef;
  def map between actCycA and V_da for
    vars V_da and V_da;
  enddef;
  def map between actCycA and mass for
    vars mass and mass;
  enddef;
  def map between actCycA and V_di for
    vars V_di and V_di;
    vars actCycA and actCycA;
  enddef;
  def map between actCycA and TF_E for
    vars TF_E and TF_E;
    vars actCycA and actCycA;
  enddef;
  def map between actCycA and Tri_A for
    vars Tri_A and Tri_A;
    vars actCycA and actCycA;
  enddef;
  def map between actCycA and freeCKI for
    vars freeCKI and freeCKI;
  enddef;
  def map between CycA and kinetic_parameters for
    vars k_sap and k_sap;
    vars k_sapp and k_sapp;
  enddef;
  def map between CycA and V_da for
    vars V_da and V_da;
  enddef;
  def map between CycA and mass for
    vars mass and mass;
  enddef;
  def map between CycA and TF_E for
    vars TF_E and TF_E;
  enddef;
  def map between actCycB and kinetic_parameters for
    vars k_asb and k_asb;
    vars k_dib and k_dib;
  enddef;
  def map between actCycB and V_25 for
    vars V_25 and V_25;
  enddef;
  def map between actCycB and V_sb for
    vars V_sb and V_sb;
  enddef;
  def map between actCycB and V_db for
    vars V_db and V_db;
  enddef;
  def map between actCycB and V_di for
    vars V_di and V_di;
    vars actCycB and actCycB;
  enddef;
  def map between actCycB and V_wee for
    vars V_wee and V_wee;
  enddef;
  def map between actCycB and CycB for
    vars CycB and CycB;
  enddef;
  def map between actCycB and freeCKI for
    vars freeCKI and freeCKI;
  enddef;
  def map between actCycB and Tri_B for
    vars Tri_B and Tri_B;
  enddef;
  def map between actCycB and mass for
    vars mass and mass;
  enddef;
  def map between actCycB and preMPF for
    vars preMPF and preMPF;
  enddef;
  def map between CycB and V_sb for
    vars V_sb and V_sb;
  enddef;
  def map between CycB and V_db for
    vars V_db and V_db;
  enddef;
  def map between CycB and mass for
    vars mass and mass;
  enddef;
  def map between actCycE and kinetic_parameters for
    vars k_die and k_die;
    vars k_ase and k_ase;
    vars k_sep and k_sep;
    vars k_sepp and k_sepp;
  enddef;
  def map between actCycE and V_de for
    vars V_de and V_de;
    vars actCycE and actCycE;
  enddef;
  def map between actCycE and V_di for
    vars V_di and V_di;
    vars actCycE and actCycE;
  enddef;
  def map between actCycE and Tri_E for
    vars Tri_E and Tri_E;
    vars actCycE and actCycE;
  enddef;
  def map between actCycE and freeCKI for
    vars freeCKI and freeCKI;
  enddef;
  def map between actCycE and TF_E for
    vars TF_E and TF_E;
  enddef;
  def map between actCycE and mass for
    vars mass and mass;
  enddef;
  def map between CycE and kinetic_parameters for
    vars k_sep and k_sep;
    vars k_sepp and k_sepp;
  enddef;
  def map between CycE and V_de for
    vars V_de and V_de;
  enddef;
  def map between CycE and TF_E for
    vars TF_E and TF_E;
  enddef;
  def map between CycE and mass for
    vars mass and mass;
  enddef;
  def map between CycD and mass for
    vars mass and mass;
  enddef;
  def map between Cdc20_A and kinetic_parameters for
    vars k_a20 and k_a20;
    vars k_i20 and k_i20;
    vars k_d20 and k_d20;
  enddef;
  def map between Cdc20_A and APCP for
    vars APCP and APCP;
  enddef;
  def map between Cdc20_A and Cdc20_T for
    vars Cdc20_T and Cdc20_T;
  enddef;
  def map between Cdc20_T and kinetic_parameters for
    vars k_s20p and k_s20p;
    vars k_d20 and k_d20;
    vars k_s20pp and k_s20pp;
  enddef;
  def map between Cdc20_T and actCycB for
    vars actCycB and actCycB;
  enddef;
  def map between APCP and kinetic_parameters for
    vars k_aAPC and k_aAPC;
    vars k_iAPC and k_iAPC;
  enddef;
  def map between APCP and actCycB for
    vars actCycB and actCycB;
  enddef;
  def map between Tri_A and CycA for
    vars CycA and CycA;
  enddef;
  def map between Tri_E and CycE for
    vars CycE and CycE;
  enddef;
  def map between freeCKI and CKI for
    vars CKI and CKI;
  enddef;
  def map between freeCKI and Tri_B for
    vars Tri_B and Tri_B;
    vars freeCKI and freeCKI;
  enddef;
  def map between freeCKI and Tri_A for
    vars Tri_A and Tri_A;
  enddef;
  def map between freeCKI and Tri_E for
    vars Tri_E and Tri_E;
  enddef;
  def map between Cdh1 and kinetic_parameters for
    vars k_ah1p and k_ah1p;
    vars k_ah1pp and k_ah1pp;
    vars k_ih1p and k_ih1p;
    vars k_ih1pp and k_ih1pp;
    vars k_ih1ppp and k_ih1ppp;
    vars k_ih1pppp and k_ih1pppp;
    vars k_ih1ppppp and k_ih1ppppp;
  enddef;
  def map between Cdh1 and TF_I for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Cdh1 and actCycA for
    vars actCycA and actCycA;
  enddef;
  def map between Cdh1 and actCycE for
    vars actCycE and actCycE;
  enddef;
  def map between Cdh1 and actCycB for
    vars actCycB and actCycB;
  enddef;
  def map between Cdh1 and CycD for
    vars CycD and CycD;
  enddef;
  def map between V_atf and kinetic_parameters for
    vars k_atfp and k_atfp;
    vars k_atfpp and k_atfpp;
    vars k_atfppp and k_atfppp;
    vars k_atfpppp and k_atfpppp;
  enddef;
  def map between V_atf and actCycA for
    vars actCycA and actCycA;
  enddef;
  def map between V_atf and actCycE for
    vars actCycE and actCycE;
  enddef;
  def map between V_atf and CycD for
    vars CycD and CycD;
  enddef;
  def map between TF_E and kinetic_parameters for
    vars k_itfp and k_itfp;
    vars k_itfpp and k_itfpp;
    vars k_itfppp and k_itfppp;
  enddef;
  def map between TF_E and V_atf for
    vars V_atf and V_atf;
  enddef;
  def map between TF_E and actCycB for
    vars actCycB and actCycB;
  enddef;
  def map between V_de and kinetic_parameters for
    vars k_dep and k_dep;
    vars k_depp and k_depp;
    vars k_deppp and k_deppp;
    vars k_depppp and k_depppp;
  enddef;
  def map between V_de and actCycA for
    vars actCycA and actCycA;
  enddef;
  def map between V_de and actCycB for
    vars actCycB and actCycB;
  enddef;
  def map between V_da and kinetic_parameters for
    vars k_dap and k_dap;
    vars k_dapp and k_dapp;
    vars k_dappp and k_dappp;
  enddef;
  def map between V_da and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between V_da and Cdc20_T for
    vars Cdc20_T and Cdc20_T;
  enddef;
  def map between TF_I and kinetic_parameters for
    vars k_afi and k_afi;
    vars k_ifip and k_ifip;
    vars k_ifipp and k_ifipp;
  enddef;
  def map between TF_I and actCycB for
    vars actCycB and actCycB;
  enddef;
  def map between TF_I and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between V_si and kinetic_parameters for
    vars k_sip and k_sip;
    vars k_sipp and k_sipp;
  enddef;
  def map between V_si and TF_I for
    vars TF_I and TF_I;
  enddef;
  def map between V_di and kinetic_parameters for
    vars k_dip and k_dip;
    vars k_dipp and k_dipp;
    vars k_dipppp and k_dipppp;
    vars k_dippppp and k_dippppp;
    vars k_dippp and k_dippp;
    vars J_14di and J_14di;
  enddef;
  def map between V_di and CycD for
    vars CycD and CycD;
  enddef;
  def map between V_di and TF_I for
    vars Cdc14 and Cdc14;
  enddef;
  def map between preMPF and V_wee for
    vars V_wee and V_wee;
  enddef;
  def map between preMPF and V_25 for
    vars V_25 and V_25;
  enddef;
  def map between preMPF and V_db for
    vars V_db and V_db;
  enddef;
  def map between preMPF and CycB for
    vars CycB and CycB;
  enddef;
  def map between Tri_B and kinetic_parameters for
    vars k_asb and k_asb;
    vars k_dib and k_dib;
  enddef;
  def map between Tri_B and CycB for
    vars CycB and CycB;
  enddef;
  def map between Tri_B and V_db for
    vars V_db and V_db;
  enddef;
  def map between Tri_B and V_di for
    vars V_di and V_di;
  enddef;
  def map between CKI and V_di for
    vars V_di and V_di;
  enddef;
  def map between CKI and V_si for
    vars V_si and V_si;
  enddef;
  def map between TF_B and kinetic_parameters for
    vars k_afb and k_afb;
    vars k_ifb and k_ifb;
  enddef;
  def map between TF_B and actCycB for
    vars actCycB and actCycB;
  enddef;
  def map between V_sb and kinetic_parameters for
    vars k_sbp and k_sbp;
    vars k_sbpp and k_sbpp;
  enddef;
  def map between V_sb and TF_B for
    vars TF_B and TF_B;
  enddef;
  def map between V_db and kinetic_parameters for
    vars k_dbp and k_dbp;
    vars k_dbpp and k_dbpp;
    vars k_dbppp and k_dbppp;
  enddef;
  def map between V_db and Cdc20_A for
    vars Cdc20_A and Cdc20_A;
  enddef;
  def map between V_db and Cdh1 for
    vars Cdh1 and Cdh1;
  enddef;
  def map between Wee1 and kinetic_parameters for
    vars k_aweep and k_aweep;
    vars k_iwee and k_iwee;
    vars k_aweepp and k_aweepp;
  enddef;
  def map between Wee1 and TF_I for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Wee1 and actCycB for
    vars actCycB and actCycB;
  enddef;
  def map between V_wee and kinetic_parameters for
    vars k_weep and k_weep;
    vars k_weepp and k_weepp;
  enddef;
  def map between V_wee and Wee1 for
    vars Wee1 and Wee1;
  enddef;
  def map between Cdc25 and kinetic_parameters for
    vars k_a25 and k_a25;
    vars k_i25p and k_i25p;
    vars k_i25pp and k_i25pp;
  enddef;
  def map between Cdc25 and TF_I for
    vars Cdc14 and Cdc14;
  enddef;
  def map between Cdc25 and actCycB for
    vars actCycB and actCycB;
  enddef;
  def map between V_25 and kinetic_parameters for
    vars k_25p and k_25p;
    vars k_25pp and k_25pp;
  enddef;
  def map between V_25 and Cdc25 for
    vars Cdc25 and Cdc25;
  enddef;
enddef;
