// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// reference: Pubmed_id 17888503; Given Michal; Family Pasek; Given Jiri; Family Simurda; Given Clive; Family Orchard; Other H; Given Georges; Family Christe; title A model of the guinea-pig ventricular cardiac myocyte incorporating a transverse-axial tubular system; volume 96; first_page 258; title Progress in Biophysics and Molecular Biology; W3CDTF 2008-01-00 00:00; last_page 280
// reference: subject_type keyword; electrophysiology; cardiac; guinea-pig; ventricular myocyte
// comment: FN Catherine Lloyd and Alan Garny; This CellML model is known to run in both COR and PCEnv to recreate the published results. The units have been checked and they are consistent. This particular version of the CellML model was translated from the author's original Matlab code. Please note that this model is relatively stiff. If you run the model using the default COR settings, you will get a message that reads: "Problem with the CVODE integrator: at t=0.00170178, mxstep steps taken before reaching tout." This basically means that you have to increase the maximum number of steps which is, by default, set to 500. Such a value is sufficient for most ODE problems, but not for ODE problems that have very stiff ODEs, such as the current model. Anyway, you will see that the model runs fine if you increase the value to something like 5000. Note that you also need to set the maximum time step to a sensible value, i.e. the duration of the stimulus which is here 1 ms. Regarding PCEnv, it uses a higher value than COR for the maximum number of steps, which is why the model will run in PCEnv without having to change this particular setting. Otherwise, like in COR there is a need to set the maximum time step to a sensible value. PCEnv uses a default value of 1 s for the Pasek model, which is clearly not small enough as can be seen when running the model for 10 s. If one uses 0.001 s, then everything is fine.
// created: W3CDTF 2008-11-14T00:00:00+00:00
// modification: W3CDTF 2008-12-20T14:02:40+13:00; This version of the model was based on the original author's Matlab code - not the published paper itself. I used Martin Fink's Matlab to CellML translator to generate all the MathML, and then added structure to the model (components, connections and encapulation grouping) and also added unit definitions and unit declarations for all the variables. Thank you Alan (Garny) for doing the final unit balance for me!; Given Catherine; Family Lloyd; Other May
// reference: Pubmed_id 17888503; Given Michal; Family Pasek; Given Jiri; Family Simurda; Given Clive; Family Orchard; Given Georges; Family Christe; title A model of the guinea-pig ventricular cardiac myocyte incorporating a transverse-axial tubular system; volume 96; first_page 258; title Progress in Biophysics and Molecular Biology; W3CDTF 2008-05-00 00:00; last_page 280
def model pasek_model_2008 as
  // A model of the guinea-pig ventricular cardiac myocyte incorporating a transverse-axial tubular system
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model is known to run in both COR and OpenCell to recreate the published results. The units have been checked and they are consistent. This particular version of the CellML model was translated from the author's original Matlab code.
  //
  // Please note that this model is relatively stiff. If you run the model using the default COR settings, you will get a message that reads: "Problem with the CVODE integrator: at t=0.00170178, mxstep steps taken before reaching tout." This basically means that you have to increase the maximum number of steps which is, by default, set to 500. Such a value is sufficient for most ODE problems, but not for ODE problems that have very stiff ODEs, such as the current model. Anyway, you will see that the model runs fine if you increase the value to something like 5000. Note that you also need to set the maximum time step to a sensible value, i.e. the duration of the stimulus which is here 1ms.
  //
  // Regarding OpenCell, it uses a higher value than COR for the maximum number of steps, which is why the model will run in OpenCell without having to change this particular setting. Otherwise, like in COR there is a need to set the maximum time step to a sensible value. OpenCell uses a default value of 1s for the Pasek model, which is clearly not small enough as can be seen when running the model for 10s. If one uses 0.001s, then everything is fine.
  //
  // Model Structure
  //
  // ABSTRACT: A model of the guinea-pig cardiac ventricular myocyte has been developed that includes a representation of the transverse-axial tubular system (TATS), including heterogeneous distribution of ion flux pathways between the surface and tubular membranes. The model reproduces frequency-dependent changes of action potential shape and intracellular ion concentrations and can replicate experimental data showing ion diffusion between the tubular lumen and external solution in guinea-pig myocytes. The model is stable at rest and during activity and returns to rested state after perturbation. Theoretical analysis and model simulations show that, due to tight electrical coupling, tubular and surface membranes behave as a homogeneous whole during voltage and current clamp (maximum difference 0.9 mV at peak tubular INa of -38 nA). However, during action potentials, restricted diffusion and ionic currents in TATS cause depletion of tubular Ca2+ and accumulation of tubular K+ (up to -19.8% and +3.4%, respectively, of bulk extracellular values, at 6 Hz). These changes, in turn, decrease ion fluxes across the TATS membrane and decrease sarcoplasmic reticulum (SR) Ca2+ load. Thus, the TATS plays a potentially important role in modulating the function of guinea-pig ventricular myocyte in physiological conditions.
  //
  // The complete original paper reference is cited below:
  //
  // A model of the guinea-pig ventricular cardiac myocyte incorporating a transverse-axial tubular system, Michal Pasek, Jiri Simurda, Clive H. Orchard, and Georges Christe, 2008, Progress in Biophysics and Molecular Biology, 96, 258-280. PubMed ID: 17888503 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=17888503&dopt=Abstract)
  //
  // Schematic diagram of the ventricular cell model. The description of electrical activity of the surface (s) and tubular (t) membranes comprises formulation of the ion transporters shown. The intracellular space contains the subspace, the Ca2+-network (NSR) and junctional (JSR) compartments of sarcoplasmic reticulum and the Ca2+ buffers calmodulin (Bcm), troponin (Bhtrpn, Bltrpn) and calsequestrin (Bcs). The small filled rectangles in JSR membrane represent ryanodine receptors. The small bi-directional arrows denote Ca2+ diffusion. Ion diffusion between the tubular and the extracellular space is represented by the dashed arrow.
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit microvolt_millivolt as
    unit volt {pref: micro};
    unit per_millivolt;
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit per_cm as
    unit metre {pref: centi, expo: -1};
  enddef;
  def unit per_cm2 as
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit milliS as
    unit siemens {pref: milli};
  enddef;
  def unit milliS_per_cm2 as
    unit milliS;
    unit cm2 {expo: -1};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA as
    unit ampere {pref: micro};
  enddef;
  def unit microA_milliA as
    unit microA;
    unit ampere {pref: milli, expo: -1};
  enddef;
  def unit nanoA_microA as
    unit ampere {pref: nano};
    unit microA {expo: -1};
  enddef;
  def unit microA_per_cm4 as
    unit microA;
    unit cm2 {expo: -2};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar_micromolar as
    unit millimolar;
    unit micromolar {expo: -1};
  enddef;
  def unit millimolar2 as
    unit millimolar {expo: 2};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit cm3_per_second as
    unit cm3;
    unit second {expo: -1};
  enddef;
  def unit millimolar2_per_cm3 as
    unit millimolar {expo: 2};
    unit metre {pref: centi, expo: -3};
  enddef;
  def unit per_millimolar_per_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar3_per_second as
    unit millimolar {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit per_millimolar4 as
    unit millimolar {expo: -4};
  enddef;
  def unit per_millimolar4_per_second as
    unit per_millimolar4;
    unit second {expo: -1};
  enddef;
  def unit microA_per_millimolar as
    unit microA;
    unit millimolar {expo: -1};
  enddef;
  def unit microA_per_cm2 as
    unit microA;
    unit cm2 {expo: -1};
  enddef;
  def unit microF_per_cm2 as
    unit microF;
    unit cm2 {expo: -1};
  enddef;
  def unit ohm_cm as
    unit ohm;
    unit cm;
  enddef;
  def unit ohm_per_cm2 as
    unit ohm;
    unit cm2 {expo: -1};
  enddef;
  def unit microA_per_millimolar4 as
    unit microA;
    unit per_millimolar4;
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {pref: kilo, expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mole_per_coulomb as
    unit coulomb_per_mole {expo: -1};
  enddef;
  def unit cm3 as
    unit metre {pref: centi, expo: 3};
  enddef;
  def unit per_cm3 as
    unit cm3 {expo: -1};
  enddef;
  def unit per_cm3_second as
    unit cm3 {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit litre_per_second as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit litre_per_second_cm2 as
    unit litre;
    unit second {expo: -1};
    unit cm {expo: -2};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp model_parameters as
    var R: joule_per_kilomole_kelvin {pub: out, init: 8310};
    var T: kelvin {pub: out, init: 310};
    var F: coulomb_per_mole {pub: out, init: 96500};
    var Na_e: millimolar {pub: out, init: 140};
    var Ca_e: millimolar {pub: out, init: 1.8};
    var K_e: millimolar {pub: out, init: 5.4};
    var ATP_i: millimolar {pub: out, init: 6.8};
    var Vt: cm3 {pub: out};
    var Vd: cm3 {pub: out};
    var Vmyo: cm3 {pub: out};
    var Sms: cm2 {pub: out};
    var Smt: cm2 {pub: out};
    var Cms: microF {pub: out};
    var Cmt: microF {pub: out};
    var Rst: ohm {pub: out};
    var VSRup: cm3 {pub: out};
    var VSRrel: cm3 {pub: out};
    var Vc: cm3;
    var pt: dimensionless;
    var Rot: ohm_cm {init: 83.33};
    var rt: cm {init: 148.15e-7};
    var Lt: cm {init: 5.93e-4};
    var rc: cm {init: 5.93e-4};
    var Lc: cm {init: 0.013};
    var ptcm: per_cm2 {init: 21028875};
    Sms = 2{dimensionless}*3.141592{dimensionless}*sqr(rc)+2{dimensionless}*3.14159{dimensionless}*rc*Lc;
    Vc = 3.14159{dimensionless}*sqr(rc)*Lc;
    Vmyo = Vc*0.68{dimensionless};
    VSRup = Vc*0.055{dimensionless};
    VSRrel = Vc*0.00316{dimensionless};
    Vd = Vc*0.68{dimensionless}*0.00006{dimensionless};
    pt = ptcm*2{dimensionless}*3.14159{dimensionless}*rc*Lc;
    Smt = 2{dimensionless}*3.14159{dimensionless}*rt*Lt*pt;
    Vt = 3.14159{dimensionless}*sqr(rt)*Lt*pt;
    Cmt = Smt*1{microF_per_cm2};
    Cms = Sms*1{microF_per_cm2};
    Rst = Rot*Lt/2{dimensionless}/(3.14159{dimensionless}*sqr(rt)*pt);
  enddef;

  def comp i_circ as
    var i_circ: microA {pub: out};
    var Rst: ohm {pub: in};
    var Vm_s: millivolt {pub: in};
    var Vm_t: millivolt {pub: in};
    i_circ = 1000{microvolt_millivolt}*(Vm_t/Rst-Vm_s/Rst);
  enddef;

  def comp membrane_permeabilities as
    var g_Na_s: milliS {pub: out};
    var g_Naps_s: milliS {pub: out};
    var q_Kr_s: milliS {pub: out};
    var q_Ks_s: milliS {pub: out};
    var g_Kp_s: milliS {pub: out};
    var g_Kto_s: milliS {pub: out};
    var g_K1_s: milliS {pub: out};
    var g_KNa_s: milliS {pub: out};
    var g_KATP_s: milliS {pub: out};
    var g_Nab_s: milliS {pub: out};
    var g_Cab_s: milliS {pub: out};
    var i_pCa_max_s: microA {pub: out};
    var i_NaK_max_s: microA {pub: out};
    var i_NaCa_max_s: microA {pub: out};
    var P_CaL_s: litre_per_second {pub: out};
    var P_KL_s: litre_per_second {pub: out};
    var P_nsNa_s: litre_per_second {pub: out};
    var P_nsK_s: litre_per_second {pub: out};
    var g_Na_t: milliS {pub: out};
    var g_Naps_t: milliS {pub: out};
    var q_Kr_t: milliS {pub: out};
    var q_Ks_t: milliS {pub: out};
    var g_Kp_t: milliS {pub: out};
    var g_Kto_t: milliS {pub: out};
    var g_K1_t: milliS {pub: out};
    var g_KNa_t: milliS {pub: out};
    var g_KATP_t: milliS {pub: out};
    var g_Nab_t: milliS {pub: out};
    var g_Cab_t: milliS {pub: out};
    var i_pCa_max_t: microA {pub: out};
    var i_NaK_max_t: microA {pub: out};
    var i_NaCa_max_t: microA {pub: out};
    var P_CaL_t: litre_per_second {pub: out};
    var P_KL_t: litre_per_second {pub: out};
    var P_nsNa_t: litre_per_second {pub: out};
    var P_nsK_t: litre_per_second {pub: out};
    var g_Na: milliS_per_cm2 {init: 30};
    var fNat: dimensionless {init: 0.64};
    var g_Naps: milliS_per_cm2 {init: 0.0053};
    var fNapst: dimensionless {init: 0.526};
    var q_Kr: milliS_per_cm2 {init: 0.8};
    var fKrt: dimensionless {init: 0.526};
    var q_Ks: milliS_per_cm2 {init: 0.1975};
    var fKst: dimensionless {init: 0.526};
    var g_Kp: milliS_per_cm2 {init: 0.006};
    var fKpt: dimensionless {init: 0.526};
    var g_Kto: milliS_per_cm2 {init: 0};
    var fKtot: dimensionless {init: 0.526};
    var g_K1: milliS_per_cm2 {init: 0.75};
    var fK1t: dimensionless {init: 0.8};
    var g_KNa: milliS_per_cm2 {init: 0.12848};
    var fKNat: dimensionless {init: 0.526};
    var g_KATP: milliS_per_cm2 {init: 1};
    var fKATPt: dimensionless {init: 0.526};
    var g_Nab: milliS_per_cm2 {init: 0.00075};
    var fNabt: dimensionless {init: 0.526};
    var g_Cab: milliS_per_cm2 {init: 0.0021};
    var fCabt: dimensionless {init: 0.526};
    var P_CaL: litre_per_second_cm2 {init: 48e-4};
    var fCaLt: dimensionless {init: 0.64};
    var P_KL: litre_per_second_cm2 {init: 48e-7};
    var P_nsNa: litre_per_second_cm2 {init: 1.75e-7};
    var fnsNat: dimensionless {init: 0.526};
    var P_nsK: litre_per_second_cm2 {init: 1.75e-7};
    var fnsKt: dimensionless {init: 0.526};
    var i_NaCa_max: microA_per_cm2 {init: 0.00025};
    var fNaCat: dimensionless {init: 0.526};
    var i_NaK_max: microA_per_cm2 {init: 1.5};
    var fNaKt: dimensionless {init: 0.526};
    var i_pCa_max: microA_per_cm2 {init: 1.15};
    var fpCat: dimensionless {init: 0.2};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    g_Na_s = g_Na*(Sms+Smt)*(1{dimensionless}-fNat);
    g_Na_t = g_Na*(Sms+Smt)*fNat;
    g_Naps_s = g_Naps*(Sms+Smt)*(1{dimensionless}-fNapst);
    g_Naps_t = g_Naps*(Sms+Smt)*fNapst;
    q_Ks_s = q_Ks*(Sms+Smt)*(1{dimensionless}-fKst);
    q_Ks_t = q_Ks*(Sms+Smt)*fKst;
    q_Kr_s = q_Kr*(Sms+Smt)*(1{dimensionless}-fKrt);
    q_Kr_t = q_Kr*(Sms+Smt)*fKrt;
    g_K1_s = g_K1*(Sms+Smt)*(1{dimensionless}-fK1t);
    g_K1_t = g_K1*(Sms+Smt)*fK1t;
    g_Kp_s = g_Kp*(Sms+Smt)*(1{dimensionless}-fKpt);
    g_Kp_t = g_Kp*(Sms+Smt)*fKpt;
    g_Kto_s = g_Kto*(Sms+Smt)*(1{dimensionless}-fKtot);
    g_Kto_t = g_Kto*(Sms+Smt)*fKtot;
    g_KNa_s = g_KNa*(Sms+Smt)*(1{dimensionless}-fKNat);
    g_KNa_t = g_KNa*(Sms+Smt)*fKNat;
    g_Nab_s = g_Nab*(Sms+Smt)*(1{dimensionless}-fNabt);
    g_Nab_t = g_Nab*(Sms+Smt)*fNabt;
    g_Cab_s = g_Cab*(Sms+Smt)*(1{dimensionless}-fCabt);
    g_Cab_t = g_Cab*(Sms+Smt)*fCabt;
    g_KATP_s = g_KATP*(Sms+Smt)*(1{dimensionless}-fKATPt);
    g_KATP_t = g_KATP*(Sms+Smt)*fKATPt;
    P_CaL_s = P_CaL*(Sms+Smt)*(1{dimensionless}-fCaLt);
    P_CaL_t = P_CaL*(Sms+Smt)*fCaLt;
    P_KL_s = P_KL*(Sms+Smt)*(1{dimensionless}-fCaLt);
    P_KL_t = P_KL*(Sms+Smt)*fCaLt;
    P_nsNa_s = P_nsNa*(Sms+Smt)*(1{dimensionless}-fnsNat);
    P_nsNa_t = P_nsNa*(Sms+Smt)*fnsNat;
    P_nsK_s = P_nsK*(Sms+Smt)*(1{dimensionless}-fnsKt);
    P_nsK_t = P_nsK*(Sms+Smt)*fnsKt;
    i_NaCa_max_s = i_NaCa_max*(Sms+Smt)*(1{dimensionless}-fNaCat);
    i_NaCa_max_t = i_NaCa_max*(Sms+Smt)*fNaCat;
    i_NaK_max_s = i_NaK_max*(Sms+Smt)*(1{dimensionless}-fNaKt);
    i_NaK_max_t = i_NaK_max*(Sms+Smt)*fNaKt;
    i_pCa_max_s = i_pCa_max*(Sms+Smt)*(1{dimensionless}-fpCat);
    i_pCa_max_t = i_pCa_max*(Sms+Smt)*fpCat;
  enddef;

  def comp i_Kext as
    var i_Kext: microA {pub: out};
    var stim_Period: second {init: 1};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var time: second {pub: in};
    i_Kext = sel
      case (time-floor(time/stim_Period)*stim_Period >= 0{second}) and (time-floor(time/stim_Period)*stim_Period <= 0.001{second}):
        45{microA_per_cm2}*(Sms+Smt);
      otherwise:
        0{microA};
    endsel;
  enddef;

  def comp i_Na_s as
    var i_Na_s: microA {pub: out};
    var E_Na_s: millivolt {pub: out};
    var g_Na_s: milliS {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_s: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_Na_s = ln(Na_e/Na_i)*R*T/F;
    i_Na_s = g_Na_s*pow(m, 3{dimensionless})*h*(Vm_s-ln((Na_e+0.12{dimensionless}*K_e)/(Na_i+0.12{dimensionless}*K_i))*R*T/F);
  enddef;

  def comp i_Na_s_m_gate as
    var m: dimensionless {pub: out, init: 3.4130493e-3};
    var m_infinity: dimensionless;
    var tau_m: second;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+52.2{millivolt}-9{millivolt})/(-7.4{millivolt})));
    tau_m = (0.001{second}/(101.6{dimensionless}*exp(Vm_s*0.1135{per_millivolt})+0.02268{dimensionless}*exp(-0.0717{per_millivolt}*Vm_s))+0.0001{second})/4.83{dimensionless};
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp i_Na_s_h_gate as
    var h: dimensionless {pub: out, init: 8.2699973e-1};
    var h_infinity: dimensionless;
    var tau_h: second;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+85.6{millivolt}-9{millivolt})/5.5{millivolt}));
    tau_h = (0.001{second}/(1.1381e-6{dimensionless}*exp(-0.1017{per_millivolt}*Vm_s)+6.537{dimensionless}*exp(Vm_s*0.08016{per_millivolt}))+0.0005{second})/4.83{dimensionless};
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp i_Na_t as
    var i_Na_t: microA {pub: out};
    var E_Na_t: millivolt {pub: out};
    var g_Na_t: milliS {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_t: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_t: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_t: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_Na_t = ln(Na_t/Na_i)*R*T/F;
    i_Na_t = g_Na_t*pow(m, 3{dimensionless})*h*(Vm_t-ln((Na_t+0.12{dimensionless}*K_t)/(Na_i+0.12{dimensionless}*K_i))*R*T/F);
  enddef;

  def comp i_Na_t_m_gate as
    var m: dimensionless {pub: out, init: 3.4129472e-3};
    var m_infinity: dimensionless;
    var tau_m: second;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+52.2{millivolt}-9{millivolt})/(-7.4{millivolt})));
    tau_m = (0.001{second}/(101.6{dimensionless}*exp(Vm_t*0.1135{per_millivolt})+0.02268{dimensionless}*exp(-0.0717{per_millivolt}*Vm_t))+0.0001{second})/4.83{dimensionless};
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp i_Na_t_h_gate as
    var h: dimensionless {pub: out, init: 8.2700551e-1};
    var h_infinity: dimensionless;
    var tau_h: second;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+85.6{millivolt}-9{millivolt})/5.5{millivolt}));
    tau_h = (0.001{second}/(1.1381e-6{dimensionless}*exp(-0.1017{per_millivolt}*Vm_t)+6.537{dimensionless}*exp(Vm_t*0.08016{per_millivolt}))+0.0005{second})/4.83{dimensionless};
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp i_Naps_s as
    var i_Naps_s: microA {pub: out};
    var Na_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var g_Naps_s: milliS {pub: in};
    var Vm_s: millivolt {pub: in};
    i_Naps_s = g_Naps_s/(1{dimensionless}+exp((-54{millivolt}-Vm_s)/8{millivolt}))*(Vm_s-ln((Na_e+0.12{dimensionless}*K_e)/(Na_i+0.12{dimensionless}*K_i))*R*T/F);
  enddef;

  def comp i_Naps_t as
    var i_Naps_t: microA {pub: out};
    var Na_i: millimolar {pub: in};
    var Na_t: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_t: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var g_Naps_t: milliS {pub: in};
    var Vm_t: millivolt {pub: in};
    i_Naps_t = g_Naps_t/(1{dimensionless}+exp((-54{millivolt}-Vm_t)/8{millivolt}))*(Vm_t-ln((Na_t+0.12{dimensionless}*K_t)/(Na_i+0.12{dimensionless}*K_i))*R*T/F);
  enddef;

  def comp i_CaL_s as
    var i_CaL_s: microA {pub: out};
    var i_KL_s: microA {pub: out};
    var alfas: per_second;
    var betas: per_second;
    var gama: per_second;
    var omega: per_second {init: 10};
    var a: dimensionless {init: 2};
    var b: dimensionless {init: 2};
    var f: per_second {init: 300};
    var g: per_second {init: 2000};
    var f2: per_second {init: 5};
    var g2: per_second {init: 7000};
    var alfa2s: per_second;
    var beta2s: per_second;
    var Cst: dimensionless {init: 9.9797984e-1};
    var C1: dimensionless {init: 7.5722514e-5};
    var C2: dimensionless {init: 2.1545646e-9};
    var C3: dimensionless {init: 2.7463178e-14};
    var C4: dimensionless {init: -5.7569102e-17};
    var Co: dimensionless {init: -1.3496934e-17};
    var Ccast: dimensionless {init: 1.9155065e-3};
    var Cca1: dimensionless {init: 5.8135383e-7};
    var Cca2: dimensionless {init: 6.615513e-11};
    var Cca3: dimensionless {init: 3.3426555e-15};
    var Cca4: dimensionless {init: 4.6640361e-19};
    var Ccao: dimensionless {init: 3.7986638e-22};
    var P_KL_s: litre_per_second {pub: in};
    var P_CaL_s: litre_per_second {pub: in};
    var time: second {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm_s: millivolt {pub: in, priv: out};
    var Ca_ss: millimolar {pub: in};
    var Ca_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var i_CaL_t: microA {pub: in};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var y: dimensionless {priv: in};
    i_CaL_s = 1{microA_milliA}*P_CaL_s*4{dimensionless}*(Co+Ccao)*y*Vm_s*sqr(F)/(R*T)*(0.001{millimolar}*exp(2{dimensionless}*Vm_s*F/(R*T))-0.341{dimensionless}*Ca_e)/(exp(2{dimensionless}*Vm_s*F/(R*T))-1{dimensionless});
    i_KL_s = 1{microA_milliA}*P_KL_s/(1{dimensionless}-(i_CaL_s+i_CaL_t)/(0.458{microA_per_cm2}*(Sms+Smt)))*(Co+Ccao)*y*Vm_s*sqr(F)/(R*T)*(K_i*exp(Vm_s*F/(R*T))-K_e)/(exp(Vm_s*F/(R*T))-1{dimensionless});
    ode(Cst, time) = betas*C1+omega*Ccast-(4{dimensionless}*alfas+gama)*Cst;
    ode(C1, time) = 4{dimensionless}*alfas*Cst+2{dimensionless}*betas*C2+omega/b*Cca1-(betas+3{dimensionless}*alfas+gama*a)*C1;
    ode(C2, time) = 3{dimensionless}*alfas*C1+3{dimensionless}*betas*C3+omega/sqr(b)*Cca2-(2{dimensionless}*betas+2{dimensionless}*alfas+gama*sqr(a))*C2;
    ode(C3, time) = 2{dimensionless}*alfas*C2+4{dimensionless}*betas*C4+omega/pow(b, 3{dimensionless})*Cca3-(3{dimensionless}*betas+alfas+gama*pow(a, 3{dimensionless}))*C3;
    ode(C4, time) = alfas*C3+g*Co+omega/pow(b, 4{dimensionless})*Cca4-(4{dimensionless}*betas+f+gama*pow(a, 4{dimensionless}))*C4;
    ode(Co, time) = f*C4-g*Co;
    ode(Ccast, time) = beta2s*Cca1+gama*Cst-(4{dimensionless}*alfa2s+omega)*Ccast;
    ode(Cca1, time) = 4{dimensionless}*alfa2s*Ccast+2{dimensionless}*beta2s*Cca2+gama*a*C1-(beta2s+3{dimensionless}*alfa2s+omega/b)*Cca1;
    ode(Cca2, time) = 3{dimensionless}*alfa2s*Cca1+3{dimensionless}*beta2s*Cca3+gama*sqr(a)*C2-(2{dimensionless}*beta2s+2{dimensionless}*alfa2s+omega/sqr(b))*Cca2;
    ode(Cca3, time) = 2{dimensionless}*alfa2s*Cca2+4{dimensionless}*beta2s*Cca4+gama*pow(a, 3{dimensionless})*C3-(3{dimensionless}*beta2s+alfa2s+omega/pow(b, 3{dimensionless}))*Cca3;
    ode(Cca4, time) = alfa2s*Cca3+g2*Ccao+gama*pow(a, 4{dimensionless})*C4-(4{dimensionless}*beta2s+f2+omega/pow(b, 4{dimensionless}))*Cca4;
    ode(Ccao, time) = f2*Cca4-g2*Ccao;
    alfas = 400{per_second}*exp((Vm_s+12{millivolt})/10{millivolt});
    betas = 50{per_second}*exp(-(Vm_s+12{millivolt})/13{millivolt});
    gama = 187.5{per_millimolar_per_second}*Ca_ss;
    alfa2s = alfas*a;
    beta2s = betas/b;
  enddef;

  def comp i_CaL_s_y_gate as
    var y: dimensionless {pub: out, init: 7.8134852e-1};
    var y_infinity: dimensionless;
    var tau_y: second;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+35{millivolt})/6{millivolt}));
    tau_y = 0.001{second}/(0.02{dimensionless}+0.0197{dimensionless}*exp(-sqr((Vm_s+10{millivolt})*0.0337{per_millivolt})))+0.55{second}/(1{dimensionless}+exp((Vm_s+40{millivolt})/9.5{millivolt}*4{dimensionless}));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp i_CaL_t as
    var i_CaL_t: microA {pub: out};
    var i_KL_t: microA {pub: out};
    var alfat: per_second;
    var betat: per_second;
    var gama: per_second;
    var omega: per_second {init: 10};
    var a: dimensionless {init: 2};
    var b: dimensionless {init: 2};
    var f: per_second {init: 300};
    var g: per_second {init: 2000};
    var f2: per_second {init: 5};
    var g2: per_second {init: 7000};
    var alfa2t: per_second;
    var beta2t: per_second;
    var TCst: dimensionless {init: 9.9798934e-1};
    var TC1: dimensionless {init: 7.5720257e-5};
    var TC2: dimensionless {init: 2.1544156e-9};
    var TC3: dimensionless {init: 2.7459475e-14};
    var TC4: dimensionless {init: -5.7367189e-17};
    var TCo: dimensionless {init: -1.3449454e-17};
    var TCcast: dimensionless {init: 1.9155245e-3};
    var TCca1: dimensionless {init: 5.8133643e-7};
    var TCca2: dimensionless {init: 6.6150547e-11};
    var TCca3: dimensionless {init: 3.3423167e-15};
    var TCca4: dimensionless {init: 4.6165955e-19};
    var TCcao: dimensionless {init: 3.75926e-22};
    var P_KL_t: litre_per_second {pub: in};
    var P_CaL_t: litre_per_second {pub: in};
    var time: second {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm_t: millivolt {pub: in, priv: out};
    var Ca_ss: millimolar {pub: in};
    var Ca_t: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_t: millimolar {pub: in};
    var i_CaL_s: microA {pub: in};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var y: dimensionless {priv: in};
    i_CaL_t = 1{microA_milliA}*P_CaL_t*4{dimensionless}*(TCo+TCcao)*y*Vm_t*sqr(F)/(R*T)*(0.001{millimolar}*exp(2{dimensionless}*Vm_t*F/(R*T))-0.341{dimensionless}*Ca_t)/(exp(2{dimensionless}*Vm_t*F/(R*T))-1{dimensionless});
    i_KL_t = 1{microA_milliA}*P_KL_t/(1{dimensionless}-(i_CaL_s+i_CaL_t)/(0.458{microA_per_cm2}*(Sms+Smt)))*(TCo+TCcao)*y*Vm_t*sqr(F)/(R*T)*(K_i*exp(Vm_t*F/(R*T))-K_t)/(exp(Vm_t*F/(R*T))-1{dimensionless});
    ode(TCst, time) = betat*TC1+omega*TCcast-(4{dimensionless}*alfat+gama)*TCst;
    ode(TC1, time) = 4{dimensionless}*alfat*TCst+2{dimensionless}*betat*TC2+omega/b*TCca1-(betat+3{dimensionless}*alfat+gama*a)*TC1;
    ode(TC2, time) = 3{dimensionless}*alfat*TC1+3{dimensionless}*betat*TC3+omega/sqr(b)*TCca2-(2{dimensionless}*betat+2{dimensionless}*alfat+gama*sqr(a))*TC2;
    ode(TC3, time) = 2{dimensionless}*alfat*TC2+4{dimensionless}*betat*TC4+omega/pow(b, 3{dimensionless})*TCca3-(3{dimensionless}*betat+alfat+gama*pow(a, 3{dimensionless}))*TC3;
    ode(TC4, time) = alfat*TC3+g*TCo+omega/pow(b, 4{dimensionless})*TCca4-(4{dimensionless}*betat+f+gama*pow(a, 4{dimensionless}))*TC4;
    ode(TCo, time) = f*TC4-g*TCo;
    ode(TCcast, time) = beta2t*TCca1+gama*TCst-(4{dimensionless}*alfa2t+omega)*TCcast;
    ode(TCca1, time) = 4{dimensionless}*alfa2t*TCcast+2{dimensionless}*beta2t*TCca2+gama*a*TC1-(beta2t+3{dimensionless}*alfa2t+omega/b)*TCca1;
    ode(TCca2, time) = 3{dimensionless}*alfa2t*TCca1+3{dimensionless}*beta2t*TCca3+gama*sqr(a)*TC2-(2{dimensionless}*beta2t+2{dimensionless}*alfa2t+omega/sqr(b))*TCca2;
    ode(TCca3, time) = 2{dimensionless}*alfa2t*TCca2+4{dimensionless}*beta2t*TCca4+gama*pow(a, 3{dimensionless})*TC3-(3{dimensionless}*beta2t+alfa2t+omega/pow(b, 3{dimensionless}))*TCca3;
    ode(TCca4, time) = alfa2t*TCca3+g2*TCcao+gama*pow(a, 4{dimensionless})*TC4-(4{dimensionless}*beta2t+f2+omega/pow(b, 4{dimensionless}))*TCca4;
    ode(TCcao, time) = f2*TCca4-g2*TCcao;
    gama = 187.5{per_millimolar_per_second}*Ca_ss;
    alfat = 400{per_second}*exp((Vm_t+12{millivolt})/10{millivolt});
    betat = 50{per_second}*exp(-(Vm_t+12{millivolt})/13{millivolt});
    alfa2t = alfat*a;
    beta2t = betat/b;
  enddef;

  def comp i_CaL_t_y_gate as
    var y: dimensionless {pub: out, init: 7.813477e-1};
    var y_infinity: dimensionless;
    var tau_y: second;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+35{millivolt})/6{millivolt}));
    tau_y = 0.001{second}/(0.02{dimensionless}+0.0197{dimensionless}*exp(-sqr((Vm_t+10{millivolt})*0.0337{per_millivolt})))+0.55{second}/(1{dimensionless}+exp((Vm_t+40{millivolt})/9.5{millivolt}*4{dimensionless}));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp i_Kr_s as
    var i_Kr_s: microA {pub: out};
    var E_Kr_s: millivolt {pub: out};
    var q_Kr_s: milliS {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_s: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var xr: dimensionless {priv: in};
    var xri: dimensionless {priv: in};
    i_Kr_s = q_Kr_s*0.02614{dimensionless}*sqrt(K_e/5.4{millimolar})*xr*xri*(Vm_s-E_Kr_s);
    E_Kr_s = ln(K_e/K_i)*R*T/F;
  enddef;

  def comp i_Kr_s_xr_gate as
    var xr: dimensionless {pub: out, init: 2.0469344e-4};
    var xr_infinity: dimensionless;
    var tau_xr: second;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    xr_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm_s+21.5{millivolt})/7.5{millivolt}));
    tau_xr = 0.001{second}/(0.00138{per_millivolt}*(Vm_s+14.2{millivolt})/(1{dimensionless}-exp(-0.123{per_millivolt}*(Vm_s+14.2{millivolt})))+0.00061{per_millivolt}*(Vm_s+38.9{millivolt})/(exp(0.145{per_millivolt}*(Vm_s+38.9{millivolt}))-1{dimensionless}));
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
  enddef;

  def comp i_Kr_s_xri_gate as
    var xri: dimensionless {pub: out};
    var Vm_s: millivolt {pub: in};
    xri = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+9{millivolt})/22.4{millivolt}));
  enddef;

  def comp i_Kr_t as
    var i_Kr_t: microA {pub: out};
    var E_Kr_t: millivolt {pub: out};
    var q_Kr_t: milliS {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_t: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K_t: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var xr: dimensionless {priv: in};
    var xri: dimensionless {priv: in};
    i_Kr_t = q_Kr_t*0.02614{dimensionless}*sqrt(K_t/5.4{millimolar})*xr*xri*(Vm_t-E_Kr_t);
    E_Kr_t = ln(K_t/K_i)*R*T/F;
  enddef;

  def comp i_Kr_t_xr_gate as
    var xr: dimensionless {pub: out, init: 2.0469344e-4};
    var xr_infinity: dimensionless;
    var tau_xr: second;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    xr_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm_t+21.5{millivolt})/7.5{millivolt}));
    tau_xr = 0.001{second}/(0.00138{per_millivolt}*(Vm_t+14.2{millivolt})/(1{dimensionless}-exp(-0.123{per_millivolt}*(Vm_t+14.2{millivolt})))+0.00061{per_millivolt}*(Vm_t+38.9{millivolt})/(exp(0.145{per_millivolt}*(Vm_t+38.9{millivolt}))-1{dimensionless}));
    ode(xr, time) = (xr_infinity-xr)/tau_xr;
  enddef;

  def comp i_Kr_t_xri_gate as
    var xri: dimensionless {pub: out};
    var Vm_t: millivolt {pub: in};
    xri = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+9{millivolt})/22.4{millivolt}));
  enddef;

  def comp i_Ks_s as
    var i_Ks_s: microA {pub: out};
    var E_Ks_s: millivolt;
    var PRNaK: dimensionless {init: 0.01833};
    var q_Ks_s: milliS {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_s: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var xs: dimensionless {priv: in};
    i_Ks_s = q_Ks_s*(0.2308{dimensionless}+0.7692{dimensionless}/(1{dimensionless}+exp((-log(1{per_millimolar}*Ca_i)-4.2{dimensionless})/0.6{dimensionless})))*sqr(xs)*(Vm_s-E_Ks_s);
    E_Ks_s = ln((K_e+PRNaK*Na_e)/(K_i+PRNaK*Na_i))*R*T/F;
  enddef;

  def comp i_Ks_s_xs_gate as
    var xs: dimensionless {pub: out, init: 6.1359896e-3};
    var xs_infinity: dimensionless;
    var tau_xs: second;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    xs_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm_s-1.5{millivolt})/16.7{millivolt}));
    tau_xs = 0.001{second}/(7.19e-5{per_millivolt}*(Vm_s+30{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(Vm_s+30{millivolt})))+1.31e-4{per_millivolt}*(Vm_s+30{millivolt})/(exp(0.0687{per_millivolt}*(Vm_s+30{millivolt}))-1{dimensionless}));
    ode(xs, time) = (xs_infinity-xs)/tau_xs;
  enddef;

  def comp i_Ks_t as
    var i_Ks_t: microA {pub: out};
    var E_Ks_t: millivolt;
    var PRNaK: dimensionless {init: 0.01833};
    var q_Ks_t: milliS {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_t: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K_t: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_t: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var xs: dimensionless {priv: in};
    i_Ks_t = q_Ks_t*(0.2308{dimensionless}+0.7692{dimensionless}/(1{dimensionless}+exp((-log(1{per_millimolar}*Ca_i)-4.2{dimensionless})/0.6{dimensionless})))*sqr(xs)*(Vm_t-E_Ks_t);
    E_Ks_t = ln((K_t+PRNaK*Na_t)/(K_i+PRNaK*Na_i))*R*T/F;
  enddef;

  def comp i_Ks_t_xs_gate as
    var xs: dimensionless {pub: out, init: 6.1359896e-3};
    var xs_infinity: dimensionless;
    var tau_xs: second;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    xs_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(Vm_t-1.5{millivolt})/16.7{millivolt}));
    tau_xs = 0.001{second}/(7.19e-5{per_millivolt}*(Vm_t+30{millivolt})/(1{dimensionless}-exp(-0.148{per_millivolt}*(Vm_t+30{millivolt})))+1.31e-4{per_millivolt}*(Vm_t+30{millivolt})/(exp(0.0687{per_millivolt}*(Vm_t+30{millivolt}))-1{dimensionless}));
    ode(xs, time) = (xs_infinity-xs)/tau_xs;
  enddef;

  def comp i_K1_s as
    var i_K1_s: microA {pub: out};
    var E_K1_s: millivolt;
    var aK1s: dimensionless;
    var bK1s: dimensionless;
    var g_K1_s: milliS {pub: in};
    var time: second {pub: in};
    var Vm_s: millivolt {pub: in};
    var K_e: millimolar {pub: in};
    var E_Kr_s: millivolt {pub: in};
    i_K1_s = g_K1_s*sqrt(K_e/5.4{millimolar})*aK1s/(aK1s+bK1s)*(Vm_s-E_K1_s);
    E_K1_s = E_Kr_s;
    aK1s = 1020{dimensionless}/(1{dimensionless}+exp(0.2385{per_millivolt}*(Vm_s-E_K1_s-59.215{millivolt})));
    bK1s = 1000{dimensionless}*(0.49124{dimensionless}*exp(0.08032{per_millivolt}*(Vm_s-E_K1_s+5.476{millivolt}))+exp(0.06175{per_millivolt}*(Vm_s-E_K1_s-594.31{millivolt})))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(Vm_s-E_K1_s+4.753{millivolt})));
  enddef;

  def comp i_K1_t as
    var i_K1_t: microA {pub: out};
    var E_K1_t: millivolt;
    var aK1t: dimensionless;
    var bK1t: dimensionless;
    var g_K1_t: milliS {pub: in};
    var time: second {pub: in};
    var Vm_t: millivolt {pub: in};
    var K_t: millimolar {pub: in};
    var E_Kr_t: millivolt {pub: in};
    i_K1_t = g_K1_t*sqrt(K_t/5.4{millimolar})*aK1t/(aK1t+bK1t)*(Vm_t-E_K1_t);
    E_K1_t = E_Kr_t;
    aK1t = 1020{dimensionless}/(1{dimensionless}+exp(0.2385{per_millivolt}*(Vm_t-E_K1_t-59.215{millivolt})));
    bK1t = 1000{dimensionless}*(0.49124{dimensionless}*exp(0.08032{per_millivolt}*(Vm_t-E_K1_t+5.476{millivolt}))+exp(0.06175{per_millivolt}*(Vm_t-E_K1_t-594.31{millivolt})))/(1{dimensionless}+exp(-0.5143{per_millivolt}*(Vm_t-E_K1_t+4.753{millivolt})));
  enddef;

  def comp i_Kp_s as
    var i_Kp_s: microA {pub: out};
    var kps: dimensionless;
    var E_Kp_s: millivolt;
    var g_Kp_s: milliS {pub: in};
    var E_Kr_s: millivolt {pub: in};
    var Vm_s: millivolt {pub: in};
    i_Kp_s = g_Kp_s*kps*(Vm_s-E_Kp_s);
    E_Kp_s = E_Kr_s;
    kps = 1{dimensionless}/(1{dimensionless}+exp((20{millivolt}-Vm_s)/5{millivolt}));
  enddef;

  def comp i_Kp_t as
    var i_Kp_t: microA {pub: out};
    var kpt: dimensionless;
    var E_Kp_t: millivolt;
    var g_Kp_t: milliS {pub: in};
    var E_Kr_t: millivolt {pub: in};
    var Vm_t: millivolt {pub: in};
    i_Kp_t = g_Kp_t*kpt*(Vm_t-E_Kp_t);
    E_Kp_t = E_Kr_t;
    kpt = 1{dimensionless}/(1{dimensionless}+exp((20{millivolt}-Vm_t)/5{millivolt}));
  enddef;

  def comp i_Kto_s as
    var i_Kto_s: microA {pub: out};
    var fr2: dimensionless {init: 1};
    var E_Kto_s: millivolt;
    var g_Kto_s: milliS {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_s: millivolt {pub: in, priv: out};
    var E_Kr_s: millivolt {pub: in};
    var r2: dimensionless {priv: in};
    var r3: dimensionless {priv: in};
    i_Kto_s = g_Kto_s/((1{dimensionless}+exp((Vm_s+57.53{millivolt})/(-5.863{millivolt})))*(1{dimensionless}+exp((Vm_s-45.8{millivolt})/25.87{millivolt})))*(r2*fr2+r3*(1{dimensionless}-fr2))*(Vm_s-E_Kto_s);
    E_Kto_s = E_Kr_s;
  enddef;

  def comp i_Kto_s_r2_gate as
    var r2: dimensionless {pub: out, init: 9.625701e-1};
    var tau_r2: second {init: 0.02};
    var r2_infinity: dimensionless {pub: out};
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    r2_infinity = 1.006{dimensionless}/(1{dimensionless}+exp((Vm_s+36.69{millivolt}+10{millivolt})/12.43{millivolt}));
    ode(r2, time) = (r2_infinity-r2)/tau_r2;
  enddef;

  def comp i_Kto_s_r3_gate as
    var r3: dimensionless {pub: out, init: 9.6250049e-1};
    var tau_r3: second {init: 0.08};
    var r3_infinity: dimensionless;
    var r2_infinity: dimensionless {pub: in};
    var time: second {pub: in};
    r3_infinity = r2_infinity;
    ode(r3, time) = (r3_infinity-r3)/tau_r3;
  enddef;

  def comp i_Kto_t as
    var i_Kto_t: microA {pub: out};
    var fr2: dimensionless {init: 1};
    var E_Kto_t: millivolt;
    var g_Kto_t: milliS {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_t: millivolt {pub: in, priv: out};
    var E_Kr_t: millivolt {pub: in};
    var r2: dimensionless {priv: in};
    var r3: dimensionless {priv: in};
    i_Kto_t = g_Kto_t/((1{dimensionless}+exp((Vm_t+57.53{millivolt})/(-5.863{millivolt})))*(1{dimensionless}+exp((Vm_t-45.8{millivolt})/25.87{millivolt})))*(r2*fr2+r3*(1{dimensionless}-fr2))*(Vm_t-E_Kto_t);
    E_Kto_t = E_Kr_t;
  enddef;

  def comp i_Kto_t_r2_gate as
    var r2: dimensionless {pub: out, init: 9.625701e-1};
    var tau_r2: second {init: 0.02};
    var r2_infinity: dimensionless {pub: out};
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    r2_infinity = 1.006{dimensionless}/(1{dimensionless}+exp((Vm_t+36.69{millivolt}+10{millivolt})/12.43{millivolt}));
    ode(r2, time) = (r2_infinity-r2)/tau_r2;
  enddef;

  def comp i_Kto_t_r3_gate as
    var r3: dimensionless {pub: out, init: 9.6250049e-1};
    var r3_infinity: dimensionless;
    var r2_infinity: dimensionless {pub: in};
    var tau_r3: second {init: 0.08};
    var time: second {pub: in};
    r3_infinity = r2_infinity;
    ode(r3, time) = (r3_infinity-r3)/tau_r3;
  enddef;

  def comp i_KNa_s as
    var i_KNa_s: microA {pub: out};
    var E_KNa_s: millivolt;
    var g_KNa_s: milliS {pub: in};
    var time: second {pub: in};
    var Vm_s: millivolt {pub: in};
    var E_Kr_s: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    i_KNa_s = g_KNa_s*(0.8{dimensionless}-0.65{dimensionless}/(1{dimensionless}+exp((Vm_s+125{millivolt})/15{millivolt})))*0.85{dimensionless}/(1{dimensionless}+pow(66{millimolar}/Na_i, 2.8{dimensionless}))*(Vm_s-E_KNa_s);
    E_KNa_s = E_Kr_s;
  enddef;

  def comp i_KNa_t as
    var i_KNa_t: microA {pub: out};
    var E_KNa_t: millivolt;
    var g_KNa_t: milliS {pub: in};
    var time: second {pub: in};
    var Vm_t: millivolt {pub: in};
    var E_Kr_t: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    i_KNa_t = g_KNa_t*(0.8{dimensionless}-0.65{dimensionless}/(1{dimensionless}+exp((Vm_t+125{millivolt})/15{millivolt})))*0.85{dimensionless}/(1{dimensionless}+pow(66{millimolar}/Na_i, 2.8{dimensionless}))*(Vm_t-E_KNa_t);
    E_KNa_t = E_Kr_t;
  enddef;

  def comp i_nsNa_s as
    var i_nsNa_s: microA {pub: out};
    var P_nsNa_s: litre_per_second {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Na_e: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var Vm_s: millivolt {pub: in};
    i_nsNa_s = 1{microA_milliA}*P_nsNa_s*Vm_s*sqr(F)/(R*T)*(0.75{dimensionless}*Na_i*exp(Vm_s*F/(R*T))-0.75{dimensionless}*Na_e)/(exp(Vm_s*F/(R*T))-1{dimensionless})/(1{dimensionless}+pow(0.0025{millimolar}/Ca_i, 3{dimensionless}));
  enddef;

  def comp i_nsNa_t as
    var i_nsNa_t: microA {pub: out};
    var P_nsNa_t: litre_per_second {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Na_t: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var Vm_t: millivolt {pub: in};
    i_nsNa_t = 1{microA_milliA}*P_nsNa_t*Vm_t*sqr(F)/(R*T)*(0.75{dimensionless}*Na_i*exp(Vm_t*F/(R*T))-0.75{dimensionless}*Na_t)/(exp(Vm_t*F/(R*T))-1{dimensionless})/(1{dimensionless}+pow(0.0025{millimolar}/Ca_i, 3{dimensionless}));
  enddef;

  def comp i_nsK_s as
    var i_nsK_s: microA {pub: out};
    var P_nsK_s: litre_per_second {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var Vm_s: millivolt {pub: in};
    i_nsK_s = 1{microA_milliA}*P_nsK_s*Vm_s*sqr(F)/(R*T)*(0.75{dimensionless}*K_i*exp(Vm_s*F/(R*T))-0.75{dimensionless}*K_e)/(exp(Vm_s*F/(R*T))-1{dimensionless})/(1{dimensionless}+pow(0.0025{millimolar}/Ca_i, 3{dimensionless}));
  enddef;

  def comp i_nsK_t as
    var i_nsK_t: microA {pub: out};
    var P_nsK_t: litre_per_second {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var K_t: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var Vm_t: millivolt {pub: in};
    i_nsK_t = 1{microA_milliA}*P_nsK_t*Vm_t*sqr(F)/(R*T)*(0.75{dimensionless}*K_i*exp(Vm_t*F/(R*T))-0.75{dimensionless}*K_t)/(exp(Vm_t*F/(R*T))-1{dimensionless})/(1{dimensionless}+pow(0.0025{millimolar}/Ca_i, 3{dimensionless}));
  enddef;

  def comp i_Nab_s as
    var i_Nab_s: microA {pub: out};
    var g_Nab_s: milliS {pub: in};
    var Vm_s: millivolt {pub: in};
    var E_Na_s: millivolt {pub: in};
    i_Nab_s = g_Nab_s*(Vm_s-E_Na_s);
  enddef;

  def comp i_Nab_t as
    var i_Nab_t: microA {pub: out};
    var g_Nab_t: milliS {pub: in};
    var Vm_t: millivolt {pub: in};
    var E_Na_t: millivolt {pub: in};
    i_Nab_t = g_Nab_t*(Vm_t-E_Na_t);
  enddef;

  def comp i_Cab_s as
    var i_Cab_s: microA {pub: out};
    var E_Ca_s: millivolt;
    var g_Cab_s: milliS {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Ca_e: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Vm_s: millivolt {pub: in};
    i_Cab_s = g_Cab_s*(Vm_s-E_Ca_s);
    E_Ca_s = ln(Ca_e/Ca_i)*R*T/(2{dimensionless}*F);
  enddef;

  def comp i_Cab_t as
    var i_Cab_t: microA {pub: out};
    var E_Ca_t: millivolt;
    var g_Cab_t: milliS {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Ca_t: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Vm_t: millivolt {pub: in};
    i_Cab_t = g_Cab_t*(Vm_t-E_Ca_t);
    E_Ca_t = ln(Ca_t/Ca_i)*R*T/(2{dimensionless}*F);
  enddef;

  def comp i_NaCa_s as
    var i_NaCa_s: microA {pub: out};
    var i_NaCa_max_s: microA {pub: in};
    var Vm_s: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_e: millimolar {pub: in};
    i_NaCa_s = i_NaCa_max_s*exp(-0.85{dimensionless}*Vm_s*F/(R*T))*(exp(Vm_s*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_e-pow(Na_e, 3{dimensionless})*Ca_i)/(1{millimolar4}+0.0001{dimensionless}*exp(-0.85{dimensionless}*Vm_s*F/(R*T))*(exp(Vm_s*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_e+pow(Na_e, 3{dimensionless})*Ca_i));
  enddef;

  def comp i_NaCa_t as
    var i_NaCa_t: microA {pub: out};
    var i_NaCa_max_t: microA {pub: in};
    var Vm_t: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_t: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_t: millimolar {pub: in};
    i_NaCa_t = i_NaCa_max_t*exp(-0.85{dimensionless}*Vm_t*F/(R*T))*(exp(Vm_t*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_t-pow(Na_t, 3{dimensionless})*Ca_i)/(1{millimolar4}+0.0001{dimensionless}*exp(-0.85{dimensionless}*Vm_t*F/(R*T))*(exp(Vm_t*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_t+pow(Na_t, 3{dimensionless})*Ca_i));
  enddef;

  def comp i_NaK_s as
    var i_NaK_s: microA {pub: out};
    var i_NaK_max_s: microA {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm_s: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    i_NaK_s = i_NaK_max_s/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*Vm_s*F/(R*T))+0.0365{dimensionless}*1{dimensionless}/7{dimensionless}*(exp(Na_e/67.3{millimolar})-1{dimensionless})*exp(-Vm_s*F/(R*T)))*1{dimensionless}/(1{dimensionless}+pow(10{millimolar}/Na_i, 1.5{dimensionless}))*K_e/(K_e+1.5{millimolar});
  enddef;

  def comp i_NaK_t as
    var i_NaK_t: microA {pub: out};
    var i_NaK_max_t: microA {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm_t: millivolt {pub: in};
    var Na_i: millimolar {pub: in};
    var K_t: millimolar {pub: in};
    var Na_t: millimolar {pub: in};
    i_NaK_t = i_NaK_max_t/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*Vm_t*F/(R*T))+0.0365{dimensionless}*1{dimensionless}/7{dimensionless}*(exp(Na_t/67.3{millimolar})-1{dimensionless})*exp(-Vm_t*F/(R*T)))*1{dimensionless}/(1{dimensionless}+pow(10{millimolar}/Na_i, 1.5{dimensionless}))*K_t/(K_t+1.5{millimolar});
  enddef;

  def comp i_pCa_s as
    var i_pCa_s: microA {pub: out};
    var i_pCa_max_s: microA {pub: in};
    var Ca_i: millimolar {pub: in};
    i_pCa_s = i_pCa_max_s*Ca_i/(0.0005{millimolar}+Ca_i);
  enddef;

  def comp i_pCa_t as
    var i_pCa_t: microA {pub: out};
    var i_pCa_max_t: microA {pub: in};
    var Ca_i: millimolar {pub: in};
    i_pCa_t = i_pCa_max_t*Ca_i/(0.0005{millimolar}+Ca_i);
  enddef;

  def comp i_KATP_s as
    var i_KATP_s: microA {pub: out};
    var E_KATP_s: millivolt;
    var g_KATP_s: milliS {pub: in};
    var time: second {pub: in};
    var Vm_s: millivolt {pub: in};
    var E_Kr_s: millivolt {pub: in};
    var ATP_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    i_KATP_s = g_KATP_s*1{dimensionless}/(1{dimensionless}+sqr(ATP_i/0.114{millimolar}))*pow(K_e/4{millimolar}, 0.24{dimensionless})*(Vm_s-E_KATP_s);
    E_KATP_s = E_Kr_s;
  enddef;

  def comp i_KATP_t as
    var i_KATP_t: microA {pub: out};
    var E_KATP_t: millivolt;
    var g_KATP_t: milliS {pub: in};
    var time: second {pub: in};
    var Vm_t: millivolt {pub: in};
    var E_Kr_t: millivolt {pub: in};
    var ATP_i: millimolar {pub: in};
    var K_t: millimolar {pub: in};
    i_KATP_t = g_KATP_t*1{dimensionless}/(1{dimensionless}+sqr(ATP_i/0.114{millimolar}))*pow(K_t/4{millimolar}, 0.24{dimensionless})*(Vm_t-E_KATP_t);
    E_KATP_t = E_Kr_t;
  enddef;

  def comp t_tubular_ion_fluxes as
    var JteNa: millimolar_per_second {pub: out};
    var JteCa: millimolar_per_second {pub: out};
    var JteK: millimolar_per_second {pub: out};
    var tau_Na: second {init: 0.2};
    var tau_Ca: second {init: 0.24};
    var tau_K: second {init: 0.2};
    var Vt: cm3 {pub: in};
    var Na_t: millimolar {pub: in};
    var Ca_t: millimolar {pub: in};
    var K_t: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var Ca_e: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    JteNa = 1{per_cm3}*Vt/tau_Na*(Na_t-Na_e);
    JteCa = 1{per_cm3}*Vt/tau_Ca*(Ca_t-Ca_e);
    JteK = 1{per_cm3}*Vt/tau_K*(K_t-K_e);
  enddef;

  def comp JCaSRup as
    var JCaSRup: millimolar_per_second {pub: out};
    var Ca_i: millimolar {pub: in};
    var Vmyo: cm3 {pub: in};
    JCaSRup = 1{millimolar_micromolar}*1000{per_cm3_second}*Vmyo*0.0018{micromolar}*sqr(Ca_i)/(sqr(Ca_i)+sqr(0.0005{millimolar}));
  enddef;

  def comp JCaSRleak as
    var JCaSRleak: millimolar_per_second {pub: out};
    var Ca_i: millimolar {pub: in};
    var CaSRup: millimolar {pub: in};
    var Vmyo: cm3 {pub: in};
    JCaSRleak = 1250{per_cm3_second}*Vmyo*0.000058{dimensionless}*(CaSRup-Ca_i);
  enddef;

  def comp Jtr as
    var Jtr: millimolar_per_second {pub: out};
    var tau_tr: second {init: 0.03448};
    var CaSRrel: millimolar {pub: in};
    var CaSRup: millimolar {pub: in};
    var VSRrel: cm3 {pub: in};
    Jtr = 1{per_cm3}*VSRrel/tau_tr*(CaSRup-CaSRrel);
  enddef;

  def comp JCaSRrel as
    var JCaSRrel: millimolar_per_second {pub: out};
    var kap: per_millimolar4_per_second;
    var kam: per_second {init: 576};
    var kbp: per_millimolar3_per_second;
    var kbm: per_second {init: 1930};
    var kcp: per_second {init: 18};
    var kcm: per_second {init: 0.8};
    var F1: dimensionless {init: 8.053082e-1};
    var F2: dimensionless {init: 2.6639195e-4};
    var F3: dimensionless {init: 4.9455459e-10};
    var F4: dimensionless {init: 1.9442578e-1};
    var time: second {pub: in};
    var VSRrel: cm3 {pub: in};
    var Ca_ss: millimolar {pub: in};
    var CaSRrel: millimolar {pub: in};
    JCaSRrel = 1800{per_cm3_second}*VSRrel*(F2+F3)*(CaSRrel-Ca_ss);
    ode(F1, time) = F2*kam-F1*kap*pow(Ca_ss, 4{dimensionless});
    ode(F2, time) = F1*kap*pow(Ca_ss, 4{dimensionless})+F3*kbm+F4*kcm-F2*(kam+kbp*pow(Ca_ss, 3{dimensionless})+kcp);
    ode(F3, time) = F2*kbp*pow(Ca_ss, 3{dimensionless})-F3*kbm;
    ode(F4, time) = F2*kcp-F4*kcm;
    kap = 3{dimensionless}*12.15e12{per_millimolar4_per_second};
    kbp = 4.05e9{per_millimolar3_per_second};
  enddef;

  def comp JCad as
    var JCad: millimolar_per_second {pub: out};
    var tau_d: second {init: 0.003125};
    var Ca_i: millimolar {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Vmyo: cm3 {pub: in};
    JCad = 1{per_cm3}*(Ca_ss-Ca_i)*Vmyo/tau_d;
  enddef;

  def comp CaSRrel as
    var CaSRrel: millimolar {pub: out, init: 1.0326252e0};
    var Jtr: millimolar_per_second {pub: in};
    var JCaSRrel: millimolar_per_second {pub: in};
    var VSRrel: cm3 {pub: in};
    var time: second {pub: in};
    ode(CaSRrel, time) = 1{cm3}/(1{dimensionless}+15{millimolar}*0.8{millimolar}/sqr(0.8{millimolar}+CaSRrel))*(Jtr-JCaSRrel)/VSRrel;
  enddef;

  def comp CaSRup as
    var CaSRup: millimolar {pub: out, init: 1.0200296e0};
    var JCaSRleak: millimolar_per_second {pub: in};
    var JCaSRup: millimolar_per_second {pub: in};
    var Jtr: millimolar_per_second {pub: in};
    var VSRup: cm3 {pub: in};
    var time: second {pub: in};
    ode(CaSRup, time) = (JCaSRup-JCaSRleak-Jtr)/(1{per_cm3}*VSRup);
  enddef;

  def comp ion_concentrations as
    var K_t: millimolar {pub: out, init: 5.4140321e0};
    var Na_t: millimolar {pub: out, init: 1.3993239e2};
    var Ca_t: millimolar {pub: out, init: 1.8476402e0};
    var K_i: millimolar {pub: out, init: 1.3678926e2};
    var Na_i: millimolar {pub: out, init: 1.1120279e1};
    var Ca_i: millimolar {pub: out, init: 8.8787034e-5};
    var Ca_ss: millimolar {pub: out, init: 9.5977033e-5};
    var BTRH: millimolar {init: 9.6700747e-1};
    var BTRL: millimolar {init: 8.1740868e-2};
    var dBTRH: millimolar_per_second;
    var dBTRL: millimolar_per_second;
    var Vd: cm3 {pub: in};
    var VSRrel: cm3 {pub: in};
    var VSRup: cm3 {pub: in};
    var Vt: cm3 {pub: in};
    var Vmyo: cm3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Kext: microA {pub: in};
    var i_Na_s: microA {pub: in};
    var i_Naps_s: microA {pub: in};
    var i_nsNa_s: microA {pub: in};
    var i_Nab_s: microA {pub: in};
    var i_NaCa_s: microA {pub: in};
    var i_NaK_s: microA {pub: in};
    var i_Kr_s: microA {pub: in};
    var i_Ks_s: microA {pub: in};
    var i_Kp_s: microA {pub: in};
    var i_K1_s: microA {pub: in};
    var i_Kto_s: microA {pub: in};
    var i_KNa_s: microA {pub: in};
    var i_KATP_s: microA {pub: in};
    var i_nsK_s: microA {pub: in};
    var i_KL_s: microA {pub: in};
    var i_Cab_s: microA {pub: in};
    var i_pCa_s: microA {pub: in};
    var i_CaL_s: microA {pub: in};
    var i_Na_t: microA {pub: in};
    var i_Naps_t: microA {pub: in};
    var i_nsNa_t: microA {pub: in};
    var i_Nab_t: microA {pub: in};
    var i_NaCa_t: microA {pub: in};
    var i_NaK_t: microA {pub: in};
    var i_Kr_t: microA {pub: in};
    var i_Ks_t: microA {pub: in};
    var i_Kp_t: microA {pub: in};
    var i_K1_t: microA {pub: in};
    var i_Kto_t: microA {pub: in};
    var i_KNa_t: microA {pub: in};
    var i_KATP_t: microA {pub: in};
    var i_nsK_t: microA {pub: in};
    var i_KL_t: microA {pub: in};
    var i_Cab_t: microA {pub: in};
    var i_pCa_t: microA {pub: in};
    var i_CaL_t: microA {pub: in};
    var JCaSRup: millimolar_per_second {pub: in};
    var JCaSRrel: millimolar_per_second {pub: in};
    var JCaSRleak: millimolar_per_second {pub: in};
    var JCad: millimolar_per_second {pub: in};
    var Jtr: millimolar_per_second {pub: in};
    var JteNa: millimolar_per_second {pub: in};
    var JteCa: millimolar_per_second {pub: in};
    var JteK: millimolar_per_second {pub: in};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    ode(Ca_ss, time) = 1{dimensionless}/(1{dimensionless}+0.05{millimolar}*0.00238{millimolar}/sqr(0.00238{millimolar}+Ca_ss))*(-(i_CaL_s+i_CaL_t)/(2{dimensionless}*F*Vd)+1{cm3}*JCaSRrel/Vd-1{cm3}*JCad/Vd);
    ode(Ca_i, time) = 1{dimensionless}/(1{dimensionless}+0.05{millimolar}*0.00238{millimolar}/sqr(0.00238{millimolar}+Ca_i))*((-2{dimensionless}*(i_NaCa_s+i_NaCa_t)+i_Cab_s+i_Cab_t+i_pCa_s+i_pCa_t)/(-2{dimensionless}*F*Vmyo)+1{cm3}*(JCad+JCaSRleak-JCaSRup)/Vmyo-dBTRH*0.14{dimensionless}-dBTRL*0.07{dimensionless});
    dBTRH = 20000{per_millimolar_second}*Ca_i*(1{millimolar}-BTRH)-0.07{per_second}*BTRH;
    dBTRL = 40000{per_millimolar_second}*Ca_i*(1{millimolar}-BTRL)-BTRL*40{per_second};
    ode(BTRH, time) = dBTRH;
    ode(BTRL, time) = dBTRL;
    ode(Na_i, time) = -(i_Na_s+i_Na_t+i_Naps_s+i_Naps_t+i_nsNa_s+i_nsNa_t+i_Nab_s+i_Nab_t+3{dimensionless}*i_NaCa_s+3{dimensionless}*i_NaCa_t+3{dimensionless}*i_NaK_s+3{dimensionless}*i_NaK_t)/(F*Vmyo);
    ode(K_i, time) = -(-0{dimensionless}*i_Kext+i_Ks_s+i_Ks_t+i_Kr_s+i_Kr_t+i_K1_s+i_K1_t+i_Kp_s+i_Kp_t+i_KL_s+i_KL_t+i_KNa_s+i_KNa_t+i_nsK_s+i_nsK_t-2{dimensionless}*i_NaK_s-2{dimensionless}*i_NaK_t+i_KATP_s+i_KATP_t+i_Kto_s+i_Kto_t)/(F*Vmyo);
    ode(Na_t, time) = ((i_Na_t+i_Naps_t+i_nsNa_t+i_Nab_t+3{dimensionless}*i_NaCa_t+3{dimensionless}*i_NaK_t)/F-1{cm3}*JteNa)/Vt;
    ode(Ca_t, time) = ((-2{dimensionless}*i_NaCa_t+i_CaL_t+i_Cab_t+i_pCa_t)/(2{dimensionless}*F)-1{cm3}*JteCa)/Vt;
    ode(K_t, time) = ((i_Ks_t+i_Kr_t+i_K1_t+i_Kp_t+i_KNa_t+i_KL_t+i_nsK_t-2{dimensionless}*i_NaK_t+i_KATP_t+i_Kto_t)/F-1{cm3}*JteK)/Vt;
  enddef;

  def comp Vm_s as
    var Vm_s: millivolt {pub: out, init: -8.5207812e1};
    var Cms: microF {pub: in};
    var i_circ: microA {pub: in};
    var i_Kext: microA {pub: in};
    var time: second {pub: in};
    var i_Na_s: microA {pub: in};
    var i_Naps_s: microA {pub: in};
    var i_Nab_s: microA {pub: in};
    var i_NaCa_s: microA {pub: in};
    var i_NaK_s: microA {pub: in};
    var i_Kr_s: microA {pub: in};
    var i_Ks_s: microA {pub: in};
    var i_Kp_s: microA {pub: in};
    var i_K1_s: microA {pub: in};
    var i_Kto_s: microA {pub: in};
    var i_KNa_s: microA {pub: in};
    var i_KATP_s: microA {pub: in};
    var i_nsNa_s: microA {pub: in};
    var i_nsK_s: microA {pub: in};
    var i_KL_s: microA {pub: in};
    var i_Cab_s: microA {pub: in};
    var i_pCa_s: microA {pub: in};
    var i_CaL_s: microA {pub: in};
    ode(Vm_s, time) = 1000{nanoA_microA}*(i_Kext+i_circ-i_Na_s-i_Naps_s-i_CaL_s-i_KL_s-i_Ks_s-i_Kr_s-i_K1_s-i_Kp_s-i_KNa_s-i_KATP_s-i_nsNa_s-i_nsK_s-i_Nab_s-i_Cab_s-i_NaCa_s-i_NaK_s-i_pCa_s-i_Kto_s)/Cms;
  enddef;

  def comp Vm_t as
    var Vm_t: millivolt {pub: out, init: -8.5208034e1};
    var Cmt: microF {pub: in};
    var i_circ: microA {pub: in};
    var time: second {pub: in};
    var i_Na_t: microA {pub: in};
    var i_Naps_t: microA {pub: in};
    var i_Nab_t: microA {pub: in};
    var i_NaCa_t: microA {pub: in};
    var i_NaK_t: microA {pub: in};
    var i_Kr_t: microA {pub: in};
    var i_Ks_t: microA {pub: in};
    var i_Kp_t: microA {pub: in};
    var i_K1_t: microA {pub: in};
    var i_Kto_t: microA {pub: in};
    var i_KNa_t: microA {pub: in};
    var i_KATP_t: microA {pub: in};
    var i_nsNa_t: microA {pub: in};
    var i_nsK_t: microA {pub: in};
    var i_KL_t: microA {pub: in};
    var i_Cab_t: microA {pub: in};
    var i_pCa_t: microA {pub: in};
    var i_CaL_t: microA {pub: in};
    ode(Vm_t, time) = 1000{nanoA_microA}*(-i_circ-i_Na_t-i_Naps_t-i_CaL_t-i_KL_t-i_Ks_t-i_Kr_t-i_K1_t-i_Kp_t-i_KNa_t-i_KATP_t-i_nsNa_t-i_nsK_t-i_Nab_t-i_Cab_t-i_NaCa_t-i_NaK_t-i_pCa_t-i_Kto_t)/Cmt;
  enddef;

  def group as encapsulation for
    comp i_Na_s incl
      comp i_Na_s_m_gate;
      comp i_Na_s_h_gate;
    endcomp;
    comp i_CaL_s incl
      comp i_CaL_s_y_gate;
    endcomp;
    comp i_Kr_s incl
      comp i_Kr_s_xr_gate;
      comp i_Kr_s_xri_gate;
    endcomp;
    comp i_Ks_s incl
      comp i_Ks_s_xs_gate;
    endcomp;
    comp i_Kto_s incl
      comp i_Kto_s_r2_gate;
      comp i_Kto_s_r3_gate;
    endcomp;
    comp i_Na_t incl
      comp i_Na_t_m_gate;
      comp i_Na_t_h_gate;
    endcomp;
    comp i_CaL_t incl
      comp i_CaL_t_y_gate;
    endcomp;
    comp i_Kr_t incl
      comp i_Kr_t_xr_gate;
      comp i_Kr_t_xri_gate;
    endcomp;
    comp i_Ks_t incl
      comp i_Ks_t_xs_gate;
    endcomp;
    comp i_Kto_t incl
      comp i_Kto_t_r2_gate;
      comp i_Kto_t_r3_gate;
    endcomp;
  enddef;
  def map between i_Kext and environment for
    vars time and time;
  enddef;
  def map between i_Na_s and environment for
    vars time and time;
  enddef;
  def map between i_CaL_s and environment for
    vars time and time;
  enddef;
  def map between i_Kr_s and environment for
    vars time and time;
  enddef;
  def map between i_Ks_s and environment for
    vars time and time;
  enddef;
  def map between i_K1_s and environment for
    vars time and time;
  enddef;
  def map between i_Kto_s and environment for
    vars time and time;
  enddef;
  def map between i_KNa_s and environment for
    vars time and time;
  enddef;
  def map between i_nsNa_s and environment for
    vars time and time;
  enddef;
  def map between i_nsK_s and environment for
    vars time and time;
  enddef;
  def map between i_KATP_s and environment for
    vars time and time;
  enddef;
  def map between i_Na_t and environment for
    vars time and time;
  enddef;
  def map between i_CaL_t and environment for
    vars time and time;
  enddef;
  def map between i_Kr_t and environment for
    vars time and time;
  enddef;
  def map between i_Ks_t and environment for
    vars time and time;
  enddef;
  def map between i_K1_t and environment for
    vars time and time;
  enddef;
  def map between i_Kto_t and environment for
    vars time and time;
  enddef;
  def map between i_KNa_t and environment for
    vars time and time;
  enddef;
  def map between i_nsNa_t and environment for
    vars time and time;
  enddef;
  def map between i_nsK_t and environment for
    vars time and time;
  enddef;
  def map between i_KATP_t and environment for
    vars time and time;
  enddef;
  def map between JCaSRrel and environment for
    vars time and time;
  enddef;
  def map between CaSRrel and environment for
    vars time and time;
  enddef;
  def map between CaSRup and environment for
    vars time and time;
  enddef;
  def map between Vm_s and environment for
    vars time and time;
  enddef;
  def map between Vm_t and environment for
    vars time and time;
  enddef;
  def map between environment and ion_concentrations for
    vars time and time;
  enddef;
  def map between model_parameters and i_circ for
    vars Rst and Rst;
  enddef;
  def map between model_parameters and membrane_permeabilities for
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between model_parameters and i_Kext for
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between model_parameters and JCaSRup for
    vars Vmyo and Vmyo;
  enddef;
  def map between model_parameters and JCaSRleak for
    vars Vmyo and Vmyo;
  enddef;
  def map between model_parameters and Jtr for
    vars VSRrel and VSRrel;
  enddef;
  def map between model_parameters and JCaSRrel for
    vars VSRrel and VSRrel;
  enddef;
  def map between model_parameters and JCad for
    vars Vmyo and Vmyo;
  enddef;
  def map between model_parameters and CaSRrel for
    vars VSRrel and VSRrel;
  enddef;
  def map between model_parameters and CaSRup for
    vars VSRup and VSRup;
  enddef;
  def map between model_parameters and ion_concentrations for
    vars F and F;
    vars Vmyo and Vmyo;
    vars Vd and Vd;
    vars Vt and Vt;
    vars VSRrel and VSRrel;
    vars VSRup and VSRup;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between model_parameters and t_tubular_ion_fluxes for
    vars Vt and Vt;
    vars Na_e and Na_e;
    vars K_e and K_e;
    vars Ca_e and Ca_e;
  enddef;
  def map between model_parameters and Vm_s for
    vars Cms and Cms;
  enddef;
  def map between model_parameters and i_Na_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_e and Na_e;
    vars K_e and K_e;
  enddef;
  def map between model_parameters and i_Naps_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_e and Na_e;
    vars K_e and K_e;
  enddef;
  def map between model_parameters and i_CaL_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_e and K_e;
    vars Ca_e and Ca_e;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between model_parameters and i_Kr_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_e and K_e;
  enddef;
  def map between model_parameters and i_Ks_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_e and Na_e;
    vars K_e and K_e;
  enddef;
  def map between model_parameters and i_K1_s for
    vars K_e and K_e;
  enddef;
  def map between model_parameters and i_KATP_s for
    vars ATP_i and ATP_i;
    vars K_e and K_e;
  enddef;
  def map between model_parameters and i_nsNa_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_e and Na_e;
  enddef;
  def map between model_parameters and i_nsK_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_e and K_e;
  enddef;
  def map between model_parameters and i_Cab_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_e and Ca_e;
  enddef;
  def map between model_parameters and i_NaK_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_e and Na_e;
    vars K_e and K_e;
  enddef;
  def map between model_parameters and i_NaCa_s for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_e and Na_e;
    vars Ca_e and Ca_e;
  enddef;
  def map between model_parameters and Vm_t for
    vars Cmt and Cmt;
  enddef;
  def map between model_parameters and i_Na_t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_Naps_t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_CaL_t for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between model_parameters and i_Kr_t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_Ks_t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_KATP_t for
    vars ATP_i and ATP_i;
  enddef;
  def map between model_parameters and i_nsNa_t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_nsK_t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_Cab_t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_NaK_t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between model_parameters and i_NaCa_t for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane_permeabilities and i_Na_s for
    vars g_Na_s and g_Na_s;
  enddef;
  def map between membrane_permeabilities and i_Naps_s for
    vars g_Naps_s and g_Naps_s;
  enddef;
  def map between membrane_permeabilities and i_CaL_s for
    vars P_CaL_s and P_CaL_s;
    vars P_KL_s and P_KL_s;
  enddef;
  def map between membrane_permeabilities and i_Kr_s for
    vars q_Kr_s and q_Kr_s;
  enddef;
  def map between membrane_permeabilities and i_Ks_s for
    vars q_Ks_s and q_Ks_s;
  enddef;
  def map between membrane_permeabilities and i_K1_s for
    vars g_K1_s and g_K1_s;
  enddef;
  def map between membrane_permeabilities and i_Kp_s for
    vars g_Kp_s and g_Kp_s;
  enddef;
  def map between membrane_permeabilities and i_Kto_s for
    vars g_Kto_s and g_Kto_s;
  enddef;
  def map between membrane_permeabilities and i_KNa_s for
    vars g_KNa_s and g_KNa_s;
  enddef;
  def map between membrane_permeabilities and i_nsNa_s for
    vars P_nsNa_s and P_nsNa_s;
  enddef;
  def map between membrane_permeabilities and i_nsK_s for
    vars P_nsK_s and P_nsK_s;
  enddef;
  def map between membrane_permeabilities and i_Nab_s for
    vars g_Nab_s and g_Nab_s;
  enddef;
  def map between membrane_permeabilities and i_Cab_s for
    vars g_Cab_s and g_Cab_s;
  enddef;
  def map between membrane_permeabilities and i_NaCa_s for
    vars i_NaCa_max_s and i_NaCa_max_s;
  enddef;
  def map between membrane_permeabilities and i_NaK_s for
    vars i_NaK_max_s and i_NaK_max_s;
  enddef;
  def map between membrane_permeabilities and i_pCa_s for
    vars i_pCa_max_s and i_pCa_max_s;
  enddef;
  def map between membrane_permeabilities and i_KATP_s for
    vars g_KATP_s and g_KATP_s;
  enddef;
  def map between membrane_permeabilities and i_Na_t for
    vars g_Na_t and g_Na_t;
  enddef;
  def map between membrane_permeabilities and i_Naps_t for
    vars g_Naps_t and g_Naps_t;
  enddef;
  def map between membrane_permeabilities and i_CaL_t for
    vars P_CaL_t and P_CaL_t;
    vars P_KL_t and P_KL_t;
  enddef;
  def map between membrane_permeabilities and i_Kr_t for
    vars q_Kr_t and q_Kr_t;
  enddef;
  def map between membrane_permeabilities and i_Ks_t for
    vars q_Ks_t and q_Ks_t;
  enddef;
  def map between membrane_permeabilities and i_K1_t for
    vars g_K1_t and g_K1_t;
  enddef;
  def map between membrane_permeabilities and i_Kp_t for
    vars g_Kp_t and g_Kp_t;
  enddef;
  def map between membrane_permeabilities and i_Kto_t for
    vars g_Kto_t and g_Kto_t;
  enddef;
  def map between membrane_permeabilities and i_KNa_t for
    vars g_KNa_t and g_KNa_t;
  enddef;
  def map between membrane_permeabilities and i_nsNa_t for
    vars P_nsNa_t and P_nsNa_t;
  enddef;
  def map between membrane_permeabilities and i_nsK_t for
    vars P_nsK_t and P_nsK_t;
  enddef;
  def map between membrane_permeabilities and i_Nab_t for
    vars g_Nab_t and g_Nab_t;
  enddef;
  def map between membrane_permeabilities and i_Cab_t for
    vars g_Cab_t and g_Cab_t;
  enddef;
  def map between membrane_permeabilities and i_NaCa_t for
    vars i_NaCa_max_t and i_NaCa_max_t;
  enddef;
  def map between membrane_permeabilities and i_NaK_t for
    vars i_NaK_max_t and i_NaK_max_t;
  enddef;
  def map between membrane_permeabilities and i_pCa_t for
    vars i_pCa_max_t and i_pCa_max_t;
  enddef;
  def map between membrane_permeabilities and i_KATP_t for
    vars g_KATP_t and g_KATP_t;
  enddef;
  def map between i_circ and Vm_s for
    vars i_circ and i_circ;
    vars Vm_s and Vm_s;
  enddef;
  def map between i_Kext and Vm_s for
    vars i_Kext and i_Kext;
  enddef;
  def map between i_circ and Vm_t for
    vars i_circ and i_circ;
    vars Vm_t and Vm_t;
  enddef;
  def map between JCaSRup and ion_concentrations for
    vars JCaSRup and JCaSRup;
    vars Ca_i and Ca_i;
  enddef;
  def map between CaSRup and JCaSRup for
    vars JCaSRup and JCaSRup;
  enddef;
  def map between JCaSRleak and ion_concentrations for
    vars JCaSRleak and JCaSRleak;
    vars Ca_i and Ca_i;
  enddef;
  def map between JCaSRleak and CaSRup for
    vars JCaSRleak and JCaSRleak;
    vars CaSRup and CaSRup;
  enddef;
  def map between Jtr and ion_concentrations for
    vars Jtr and Jtr;
  enddef;
  def map between Jtr and CaSRrel for
    vars Jtr and Jtr;
    vars CaSRrel and CaSRrel;
  enddef;
  def map between Jtr and CaSRup for
    vars Jtr and Jtr;
    vars CaSRup and CaSRup;
  enddef;
  def map between JCaSRrel and ion_concentrations for
    vars JCaSRrel and JCaSRrel;
    vars Ca_ss and Ca_ss;
  enddef;
  def map between JCaSRrel and CaSRrel for
    vars JCaSRrel and JCaSRrel;
    vars CaSRrel and CaSRrel;
  enddef;
  def map between JCad and ion_concentrations for
    vars JCad and JCad;
    vars Ca_i and Ca_i;
    vars Ca_ss and Ca_ss;
  enddef;
  def map between ion_concentrations and i_Kext for
    vars i_Kext and i_Kext;
  enddef;
  def map between ion_concentrations and i_Na_s for
    vars i_Na_s and i_Na_s;
    vars Na_i and Na_i;
    vars K_i and K_i;
  enddef;
  def map between ion_concentrations and i_Naps_s for
    vars i_Naps_s and i_Naps_s;
    vars Na_i and Na_i;
    vars K_i and K_i;
  enddef;
  def map between ion_concentrations and i_CaL_s for
    vars i_CaL_s and i_CaL_s;
    vars i_KL_s and i_KL_s;
    vars Ca_ss and Ca_ss;
    vars K_i and K_i;
  enddef;
  def map between ion_concentrations and i_Kr_s for
    vars i_Kr_s and i_Kr_s;
    vars K_i and K_i;
  enddef;
  def map between ion_concentrations and i_Ks_s for
    vars i_Ks_s and i_Ks_s;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars K_i and K_i;
  enddef;
  def map between ion_concentrations and i_Kp_s for
    vars i_Kp_s and i_Kp_s;
  enddef;
  def map between ion_concentrations and i_K1_s for
    vars i_K1_s and i_K1_s;
  enddef;
  def map between ion_concentrations and i_Kto_s for
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between ion_concentrations and i_KNa_s for
    vars i_KNa_s and i_KNa_s;
    vars Na_i and Na_i;
  enddef;
  def map between ion_concentrations and i_KATP_s for
    vars i_KATP_s and i_KATP_s;
  enddef;
  def map between ion_concentrations and i_nsNa_s for
    vars i_nsNa_s and i_nsNa_s;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
  enddef;
  def map between ion_concentrations and i_nsK_s for
    vars i_nsK_s and i_nsK_s;
    vars Ca_i and Ca_i;
    vars K_i and K_i;
  enddef;
  def map between ion_concentrations and i_Nab_s for
    vars i_Nab_s and i_Nab_s;
  enddef;
  def map between ion_concentrations and i_Cab_s for
    vars i_Cab_s and i_Cab_s;
    vars Ca_i and Ca_i;
  enddef;
  def map between ion_concentrations and i_NaK_s for
    vars i_NaK_s and i_NaK_s;
    vars Na_i and Na_i;
  enddef;
  def map between ion_concentrations and i_pCa_s for
    vars i_pCa_s and i_pCa_s;
    vars Ca_i and Ca_i;
  enddef;
  def map between ion_concentrations and i_NaCa_s for
    vars i_NaCa_s and i_NaCa_s;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
  enddef;
  def map between ion_concentrations and i_Na_t for
    vars i_Na_t and i_Na_t;
    vars Na_i and Na_i;
    vars K_i and K_i;
    vars Na_t and Na_t;
    vars K_t and K_t;
  enddef;
  def map between ion_concentrations and i_Naps_t for
    vars i_Naps_t and i_Naps_t;
    vars Na_i and Na_i;
    vars K_i and K_i;
    vars Na_t and Na_t;
    vars K_t and K_t;
  enddef;
  def map between ion_concentrations and i_CaL_t for
    vars i_CaL_t and i_CaL_t;
    vars i_KL_t and i_KL_t;
    vars Ca_ss and Ca_ss;
    vars K_i and K_i;
    vars K_t and K_t;
    vars Ca_t and Ca_t;
  enddef;
  def map between ion_concentrations and i_Kr_t for
    vars i_Kr_t and i_Kr_t;
    vars K_i and K_i;
    vars K_t and K_t;
  enddef;
  def map between ion_concentrations and i_Ks_t for
    vars i_Ks_t and i_Ks_t;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars K_i and K_i;
    vars Na_t and Na_t;
    vars K_t and K_t;
  enddef;
  def map between ion_concentrations and i_Kp_t for
    vars i_Kp_t and i_Kp_t;
  enddef;
  def map between ion_concentrations and i_K1_t for
    vars i_K1_t and i_K1_t;
    vars K_t and K_t;
  enddef;
  def map between ion_concentrations and i_Kto_t for
    vars i_Kto_t and i_Kto_t;
  enddef;
  def map between ion_concentrations and i_KNa_t for
    vars i_KNa_t and i_KNa_t;
    vars Na_i and Na_i;
  enddef;
  def map between ion_concentrations and i_KATP_t for
    vars i_KATP_t and i_KATP_t;
    vars K_t and K_t;
  enddef;
  def map between ion_concentrations and i_nsNa_t for
    vars i_nsNa_t and i_nsNa_t;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars Na_t and Na_t;
  enddef;
  def map between ion_concentrations and i_nsK_t for
    vars i_nsK_t and i_nsK_t;
    vars Ca_i and Ca_i;
    vars K_i and K_i;
    vars K_t and K_t;
  enddef;
  def map between ion_concentrations and i_Nab_t for
    vars i_Nab_t and i_Nab_t;
  enddef;
  def map between ion_concentrations and i_Cab_t for
    vars i_Cab_t and i_Cab_t;
    vars Ca_i and Ca_i;
    vars Ca_t and Ca_t;
  enddef;
  def map between ion_concentrations and i_NaK_t for
    vars i_NaK_t and i_NaK_t;
    vars Na_i and Na_i;
    vars Na_t and Na_t;
    vars K_t and K_t;
  enddef;
  def map between ion_concentrations and i_pCa_t for
    vars i_pCa_t and i_pCa_t;
    vars Ca_i and Ca_i;
  enddef;
  def map between ion_concentrations and i_NaCa_t for
    vars i_NaCa_t and i_NaCa_t;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars Na_t and Na_t;
    vars Ca_t and Ca_t;
  enddef;
  def map between ion_concentrations and t_tubular_ion_fluxes for
    vars Na_t and Na_t;
    vars Ca_t and Ca_t;
    vars K_t and K_t;
    vars JteNa and JteNa;
    vars JteCa and JteCa;
    vars JteK and JteK;
  enddef;
  def map between Vm_s and i_Na_s for
    vars Vm_s and Vm_s;
    vars i_Na_s and i_Na_s;
  enddef;
  def map between Vm_s and i_Naps_s for
    vars Vm_s and Vm_s;
    vars i_Naps_s and i_Naps_s;
  enddef;
  def map between Vm_s and i_CaL_s for
    vars Vm_s and Vm_s;
    vars i_CaL_s and i_CaL_s;
    vars i_KL_s and i_KL_s;
  enddef;
  def map between Vm_s and i_Kp_s for
    vars Vm_s and Vm_s;
    vars i_Kp_s and i_Kp_s;
  enddef;
  def map between Vm_s and i_Kr_s for
    vars Vm_s and Vm_s;
    vars i_Kr_s and i_Kr_s;
  enddef;
  def map between Vm_s and i_Ks_s for
    vars Vm_s and Vm_s;
    vars i_Ks_s and i_Ks_s;
  enddef;
  def map between Vm_s and i_K1_s for
    vars Vm_s and Vm_s;
    vars i_K1_s and i_K1_s;
  enddef;
  def map between Vm_s and i_Kto_s for
    vars Vm_s and Vm_s;
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between Vm_s and i_KNa_s for
    vars Vm_s and Vm_s;
    vars i_KNa_s and i_KNa_s;
  enddef;
  def map between Vm_s and i_KATP_s for
    vars Vm_s and Vm_s;
    vars i_KATP_s and i_KATP_s;
  enddef;
  def map between Vm_s and i_nsNa_s for
    vars Vm_s and Vm_s;
    vars i_nsNa_s and i_nsNa_s;
  enddef;
  def map between Vm_s and i_nsK_s for
    vars Vm_s and Vm_s;
    vars i_nsK_s and i_nsK_s;
  enddef;
  def map between Vm_s and i_Nab_s for
    vars Vm_s and Vm_s;
    vars i_Nab_s and i_Nab_s;
  enddef;
  def map between Vm_s and i_Cab_s for
    vars Vm_s and Vm_s;
    vars i_Cab_s and i_Cab_s;
  enddef;
  def map between Vm_s and i_NaK_s for
    vars Vm_s and Vm_s;
    vars i_NaK_s and i_NaK_s;
  enddef;
  def map between Vm_s and i_pCa_s for
    vars i_pCa_s and i_pCa_s;
  enddef;
  def map between Vm_s and i_NaCa_s for
    vars Vm_s and Vm_s;
    vars i_NaCa_s and i_NaCa_s;
  enddef;
  def map between Vm_t and i_Na_t for
    vars Vm_t and Vm_t;
    vars i_Na_t and i_Na_t;
  enddef;
  def map between Vm_t and i_Naps_t for
    vars Vm_t and Vm_t;
    vars i_Naps_t and i_Naps_t;
  enddef;
  def map between Vm_t and i_CaL_t for
    vars Vm_t and Vm_t;
    vars i_CaL_t and i_CaL_t;
    vars i_KL_t and i_KL_t;
  enddef;
  def map between Vm_t and i_Kp_t for
    vars Vm_t and Vm_t;
    vars i_Kp_t and i_Kp_t;
  enddef;
  def map between Vm_t and i_Kr_t for
    vars Vm_t and Vm_t;
    vars i_Kr_t and i_Kr_t;
  enddef;
  def map between Vm_t and i_Ks_t for
    vars Vm_t and Vm_t;
    vars i_Ks_t and i_Ks_t;
  enddef;
  def map between Vm_t and i_K1_t for
    vars Vm_t and Vm_t;
    vars i_K1_t and i_K1_t;
  enddef;
  def map between Vm_t and i_Kto_t for
    vars Vm_t and Vm_t;
    vars i_Kto_t and i_Kto_t;
  enddef;
  def map between Vm_t and i_KNa_t for
    vars Vm_t and Vm_t;
    vars i_KNa_t and i_KNa_t;
  enddef;
  def map between Vm_t and i_KATP_t for
    vars Vm_t and Vm_t;
    vars i_KATP_t and i_KATP_t;
  enddef;
  def map between Vm_t and i_nsNa_t for
    vars Vm_t and Vm_t;
    vars i_nsNa_t and i_nsNa_t;
  enddef;
  def map between Vm_t and i_nsK_t for
    vars Vm_t and Vm_t;
    vars i_nsK_t and i_nsK_t;
  enddef;
  def map between Vm_t and i_Nab_t for
    vars Vm_t and Vm_t;
    vars i_Nab_t and i_Nab_t;
  enddef;
  def map between Vm_t and i_Cab_t for
    vars Vm_t and Vm_t;
    vars i_Cab_t and i_Cab_t;
  enddef;
  def map between Vm_t and i_NaK_t for
    vars Vm_t and Vm_t;
    vars i_NaK_t and i_NaK_t;
  enddef;
  def map between Vm_t and i_pCa_t for
    vars i_pCa_t and i_pCa_t;
  enddef;
  def map between Vm_t and i_NaCa_t for
    vars Vm_t and Vm_t;
    vars i_NaCa_t and i_NaCa_t;
  enddef;
  def map between i_CaL_t and i_CaL_s for
    vars i_CaL_s and i_CaL_s;
    vars i_CaL_t and i_CaL_t;
  enddef;
  def map between i_Kr_s and i_K1_s for
    vars E_Kr_s and E_Kr_s;
  enddef;
  def map between i_Kr_s and i_Kp_s for
    vars E_Kr_s and E_Kr_s;
  enddef;
  def map between i_Kr_s and i_Kto_s for
    vars E_Kr_s and E_Kr_s;
  enddef;
  def map between i_Kr_s and i_KNa_s for
    vars E_Kr_s and E_Kr_s;
  enddef;
  def map between i_Kr_s and i_KATP_s for
    vars E_Kr_s and E_Kr_s;
  enddef;
  def map between i_Na_s and i_Nab_s for
    vars E_Na_s and E_Na_s;
  enddef;
  def map between i_Kr_t and i_K1_t for
    vars E_Kr_t and E_Kr_t;
  enddef;
  def map between i_Kr_t and i_Kp_t for
    vars E_Kr_t and E_Kr_t;
  enddef;
  def map between i_Kr_t and i_Kto_t for
    vars E_Kr_t and E_Kr_t;
  enddef;
  def map between i_Kr_t and i_KNa_t for
    vars E_Kr_t and E_Kr_t;
  enddef;
  def map between i_Kr_t and i_KATP_t for
    vars E_Kr_t and E_Kr_t;
  enddef;
  def map between i_Na_t and i_Nab_t for
    vars E_Na_t and E_Na_t;
  enddef;
  def map between i_Na_s and i_Na_s_m_gate for
    vars m and m;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between i_Na_s and i_Na_s_h_gate for
    vars h and h;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between i_CaL_s and i_CaL_s_y_gate for
    vars y and y;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between i_Kr_s and i_Kr_s_xr_gate for
    vars xr and xr;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between i_Kr_s and i_Kr_s_xri_gate for
    vars xri and xri;
    vars Vm_s and Vm_s;
  enddef;
  def map between i_Ks_s and i_Ks_s_xs_gate for
    vars xs and xs;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between i_Kto_s and i_Kto_s_r2_gate for
    vars r2 and r2;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between i_Kto_s_r3_gate and i_Kto_s_r2_gate for
    vars r2_infinity and r2_infinity;
  enddef;
  def map between i_Kto_s and i_Kto_s_r3_gate for
    vars r3 and r3;
    vars time and time;
  enddef;
  def map between i_Na_t and i_Na_t_m_gate for
    vars m and m;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between i_Na_t and i_Na_t_h_gate for
    vars h and h;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between i_CaL_t and i_CaL_t_y_gate for
    vars y and y;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between i_Kr_t and i_Kr_t_xr_gate for
    vars xr and xr;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between i_Kr_t and i_Kr_t_xri_gate for
    vars xri and xri;
    vars Vm_t and Vm_t;
  enddef;
  def map between i_Ks_t and i_Ks_t_xs_gate for
    vars xs and xs;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between i_Kto_t and i_Kto_t_r2_gate for
    vars r2 and r2;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between i_Kto_t and i_Kto_t_r3_gate for
    vars r3 and r3;
    vars time and time;
  enddef;
  def map between i_Kto_t_r3_gate and i_Kto_t_r2_gate for
    vars r2_infinity and r2_infinity;
  enddef;
enddef;
