// This CellML file was generated on 29/01/2008 at 15:47:09 using:
//
// COR (0.9.31.867)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: The University of Oxford
// comment: FN Catherine Lloyd; This CellML model is known to run in COR to recreate the results in the published paper. The units have been checked and are consistent. The model will also open in PCEnv but currently will not run as the model produces NaNs.
// created: W3CDTF 2008-01-29T00:00:00+00:00
// creator: Orgname The University of Oxford; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble
// reference: Pubmed_id 17277017; Given Leonid; Family Livshitz; Other M; Given Yoram; Family Rudy; title Regulation of Ca2+ and electrical alternans in cardiac myocytes: role of CAMKII and repolarizing currents; volume 292; first_page H2854; title American Journal of Physiology: Heart and Circulatory Physiology; W3CDTF 2007-06-00 00:00; last_page H2866
// comment: FN Catherine Lloyd; This is a CellML description of Livshitz and Rudy's 2007 mathematical model describing the regulation of Ca2+ and electrical alternans in cardiac myocytes.
def model LivshitzRudy2007 as
  // Regulation of Ca2+ and electrical alternans in cardiac myocytes: role of CAMKII and repolarizing currents
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model is known to run in COR to recreate the results in the published paper. The units have been checked and are consistent. The model will also open in PCEnv but currently will not run as the model produces NaNs.
  //
  // Model Structure
  //
  // ABSTRACT: Alternans of cardiac repolarization is associated with arrhythmias and sudden death. At the cellular level, alternans involves beat-to-beat oscillation of the action potential (AP) and possibly Ca2+ transient (CaT). Because of experimental difficulty in independently controlling the Ca2+ and electrical subsystems, mathematical modeling provides additional insights into mechanisms and causality. Pacing protocols were conducted in a canine ventricular myocyte model with the following results: 1) CaT alternans results from refractoriness of the sarcoplasmic reticulum Ca2+ release system; alternation of the L-type calcium current has a negligible effect; 2) CaT-AP coupling during late AP occurs through the sodium-calcium exchanger and underlies AP duration (APD) alternans; 3) increased Ca2+/calmodulin-dependent protein kinase II (CaMKII) activity extends the range of CaT and APD alternans to slower frequencies and increases alternans magnitude; its decrease suppresses CaT and APD alternans, exerting an antiarrhythmic effect; and 4) increase of the rapid delayed rectifier current (IKr) also suppresses APD alternans but without suppressing CaT alternans. Thus CaMKII inhibition eliminates APD alternans by eliminating its cause (CaT alternans) while IKr enhancement does so by weakening CaT-APD coupling. The simulations identify combined CaMKII inhibition and IKr enhancement as a possible antiarrhythmic intervention.
  //
  // The complete original paper reference is cited below:
  //
  // Regulation of Ca2+ and electrical alternans in cardiac myocytes: role of CAMKII and repolarizing currents (http://ajpheart.physiology.org/cgi/content/abstract/292/6/H2854), Leonid M. Livshitz and Yoram Rudy, 2007, American Journal of Physiology: Heart and Circulatory Physiology (http://ajpheart.physiology.org/), 292, H2854-H2866. ( Full text (http://ajpheart.physiology.org/cgi/content/full/292/6/H2854) and PDF (http://ajpheart.physiology.org/cgi/reprint/292/6/H2854) versions of this article are available to subscribers on the American Journal of Physiology: Heart and Circulatory Physiology website). PubMed ID: 17277017 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=17277017&dopt=Abstract)
  //
  // state diagram
  //
  // Schematic diagram of the currents and the ion exchanges described by the ventricular myocyte model.
  def unit m2u as
    unit second {pref: micro};
    unit second {pref: milli, expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit uA_per_uF as
    unit ampere {pref: micro};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit mS_per_uF as
    unit siemens {pref: milli};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit uL as
    unit litre {pref: micro};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit mJ_per_mole_K as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit mM3 as
    unit mM {expo: 3};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mM_per_mV as
    unit mM;
    unit mV {expo: -1};
  enddef;
  def unit mM_per_mV_ms as
    unit mM;
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit uF_per_cm2 as
    unit farad {pref: micro};
    unit cm2 {expo: -1};
  enddef;
  def unit uF_mole_per_C as
    unit uF;
    unit mole;
    unit coulomb {expo: -1};
  enddef;
  def unit L_per_F_ms as
    unit litre;
    unit farad {expo: -1};
    unit per_ms;
  enddef;

  def comp Environment as
    var time: ms {pub: out};
    var F: C_per_mole {pub: out, init: 96485};
    var R: mJ_per_mole_K {init: 8314};
    var Temp: kelvin {init: 310};
    var FonRT: per_mV {pub: out};
    var K_o: mM {pub: out, init: 4.5};
    var Na_o: mM {pub: out, init: 140};
    var Ca_o: mM {pub: out, init: 1.8};
    FonRT = F/Temp/R;
  enddef;

  def comp cell as
    var time: ms {pub: in};
    var V: mV {pub: out, init: -89.4356034692784};
    var F: C_per_mole {pub: in};
    var ilca: uA_per_uF {pub: in};
    var icab: uA_per_uF {pub: in};
    var ipca: uA_per_uF {pub: in};
    var inaca: uA_per_uF {pub: in};
    var icat: uA_per_uF {pub: in};
    var ina: uA_per_uF {pub: in};
    var inab: uA_per_uF {pub: in};
    var ilcana: uA_per_uF {pub: in};
    var inak: uA_per_uF {pub: in};
    var ikr: uA_per_uF {pub: in};
    var iks: uA_per_uF {pub: in};
    var IK1: uA_per_uF {pub: in};
    var ikp: uA_per_uF {pub: in};
    var ilcak: uA_per_uF {pub: in};
    var caiont: uA_per_uF {pub: out};
    var naiont: uA_per_uF {pub: out};
    var kiont: uA_per_uF {pub: out};
    var l: cm {init: 0.01};
    var ra: cm {init: 0.0011};
    var vcell: uL;
    var ageo: cm2;
    var Acap: uF;
    var AF: uF_mole_per_C {pub: out};
    var vmyo: uL {pub: out};
    var vmito: uL;
    var vsr: uL;
    var vnsr: uL {pub: out};
    var vjsr: uL {pub: out};
    var vss: uL;
    var i_Stim: uA_per_uF {pub: out};
    var stim_offset: ms {init: 0};
    var stim_period: ms {init: 400};
    var stim_duration: ms {init: 3};
    var stim_amplitude: uA_per_uF {init: -15};
    var past: ms;
    vcell = 1000{m2u}*pi*ra*ra*l;
    ageo = 2{dimensionless}*pi*ra*ra+2{dimensionless}*pi*ra*l;
    Acap = ageo*2{uF_per_cm2};
    vmyo = vcell*0.68{dimensionless};
    vmito = vcell*0.24{dimensionless};
    vsr = vcell*0.06{dimensionless};
    vnsr = vcell*0.0552{dimensionless};
    vjsr = vcell*0.0048{dimensionless};
    vss = vcell*0.02{dimensionless};
    AF = Acap/F;
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{uA_per_uF};
    endsel;
    caiont = ilca+icab+ipca-2{dimensionless}*inaca+icat;
    naiont = ina+inab+3{dimensionless}*inaca+ilcana+3{dimensionless}*inak;
    kiont = ikr+iks+IK1+ikp+ilcak-2{dimensionless}*inak+i_Stim;
    ode(V, time) = -(naiont+kiont+caiont);
  enddef;

  def comp INa as
    var V: mV {pub: in};
    var time: ms {pub: in};
    var ENa: mV {pub: in};
    var H: dimensionless {init: 0.994401369032678};
    var m: dimensionless {init: 0.000734780346592185};
    var J: dimensionless {init: 0.996100688673679};
    var GNa: mS_per_uF {init: 16};
    var a: per_ms;
    var aH: per_ms;
    var bH: per_ms;
    var aj: per_ms;
    var bj: per_ms;
    var am: per_ms;
    var bm: per_ms;
    var ina: uA_per_uF {pub: out};
    ina = GNa*m*m*m*H*J*(V-ENa);
    a = 1{per_ms}-1{per_ms}/(1{dimensionless}+exp(-(V+40{mV})/0.024{mV}));
    aH = a*0.135{dimensionless}*exp((80{mV}+V)/(-6.8{mV}));
    bH = (1{per_ms}-a)/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{mV})/(-11.1{mV}))))+a*(3.56{dimensionless}*exp(0.079{per_mV}*V)+3.1{dimensionless}*1e5{dimensionless}*exp(0.35{per_mV}*V));
    aj = a*(-1.2714e5{dimensionless}*exp(0.2444{per_mV}*V)-3.474e-5{dimensionless}*exp(-0.04391{per_mV}*V))*1{per_mV}*(V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
    bj = (1{per_ms}-a)*0.3{dimensionless}*exp(-2.535e-7{per_mV}*V)/(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV})))+a*0.1212{dimensionless}*exp(-0.01052{per_mV}*V)/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
    am = 0.32{per_ms}*1{per_mV}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
    bm = 0.08{per_ms}*exp(-V/11{mV});
    ode(H, time) = aH*(1{dimensionless}-H)-bH*H;
    ode(m, time) = am*(1{dimensionless}-m)-bm*m;
    ode(J, time) = aj*(1{dimensionless}-J)-bj*J;
  enddef;

  def comp ICaL as
    var V: mV {pub: in};
    var F: C_per_mole {pub: in};
    var FonRT: per_mV {pub: in};
    var time: ms {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var d: dimensionless {init: 3.2514786721066e-27};
    var f: dimensionless {init: 0.997404948824816};
    var dss0: dimensionless;
    var taud: ms;
    var dss1: dimensionless;
    var dss: dimensionless;
    var fss: dimensionless;
    var tauf: ms;
    var gacai: dimensionless {init: 1};
    var gacao: dimensionless {init: 0.341};
    var kmca: mM {init: 0.0006};
    var pca: L_per_F_ms {init: 0.00054};
    var pna: L_per_F_ms {init: 6.75e-7};
    var ganai: dimensionless {init: 0.75};
    var ganao: dimensionless {init: 0.75};
    var pk: L_per_F_ms {init: 1.93e-7};
    var gaki: dimensionless {init: 0.75};
    var gako: dimensionless {init: 0.75};
    var ibarca: uA_per_uF;
    var ibarna: uA_per_uF;
    var ibark: uA_per_uF;
    var fca: dimensionless;
    var ilca: uA_per_uF {pub: out};
    var ilcana: uA_per_uF {pub: out};
    var ilcak: uA_per_uF {pub: out};
    dss0 = 1{dimensionless}/(1{dimensionless}+exp(-(V+10{mV})/6.24{mV}));
    taud = dss0*1{ms}*(1{dimensionless}-exp(-(V+10{mV})/6.24{mV}))/(0.035{per_mV}*(V+10{mV}));
    dss1 = 1{dimensionless}/(1{dimensionless}+exp(-(V+60{mV})/0.024{mV}));
    dss = dss0*dss1;
    fss = 1{dimensionless}/(1{dimensionless}+exp((V+32{mV})/8{mV}))+0.6{dimensionless}/(1{dimensionless}+exp((50{mV}-V)/20{mV}));
    tauf = 1{ms}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_mV}*(V+10{mV})))+0.02{dimensionless});
    ibarca = pca*4{dimensionless}*V*F*FonRT*(gacai*Ca_i*exp(2{dimensionless}*V*FonRT)-gacao*Ca_o)/(exp(2{dimensionless}*V*FonRT)-1{dimensionless});
    ibarna = pna*V*F*FonRT*(ganai*Na_i*exp(V*FonRT)-ganao*Na_o)/(exp(V*FonRT)-1{dimensionless});
    ibark = pk*V*F*FonRT*(gaki*K_i*exp(V*FonRT)-gako*K_o)/(exp(V*FonRT)-1{dimensionless});
    fca = 1{dimensionless}/(1{dimensionless}+Ca_i/kmca);
    ilca = d*f*fca*ibarca;
    ilcana = d*f*fca*ibarna;
    ilcak = d*f*fca*ibark;
    ode(d, time) = (dss-d)/taud;
    ode(f, time) = (fss-f)/tauf;
  enddef;

  def comp IK1 as
    var V: mV {pub: in};
    var EK: mV {pub: in};
    var K_o: mM {pub: in};
    var GK1max: mS_per_uF {init: 0.75};
    var GK1_: mS_per_uF;
    var ak1: per_ms;
    var bk1: per_ms;
    var gK1: mS_per_uF;
    var IK1: uA_per_uF {pub: out};
    GK1_ = GK1max*sqrt(K_o/5.4{mM});
    ak1 = 1.02{per_ms}/(1{dimensionless}+exp(0.2385{per_mV}*(V-EK-59.215{mV})));
    bk1 = (0.49124{per_ms}*exp(0.08032{per_mV}*(V-EK+5.476{mV}))+1{per_ms}*exp(0.06175{per_mV}*(V-EK-594.31{mV})))/(1{dimensionless}+exp(-0.5143{per_mV}*(V-EK+4.753{mV})));
    gK1 = GK1_*ak1/(ak1+bk1);
    IK1 = gK1*(V-EK);
  enddef;

  def comp IKr as
    var time: ms {pub: in};
    var V: mV {pub: in};
    var gkrmax: mS_per_uF {init: 0.02614};
    var EK: mV {pub: in};
    var K_o: mM {pub: in};
    var xr: dimensionless {init: 0.000162194715543637};
    var r: dimensionless;
    var xrss: dimensionless;
    var tauxr: ms;
    var ikr: uA_per_uF {pub: out};
    r = 1{dimensionless}/(1{dimensionless}+exp((V+9{mV})/22.4{mV}));
    ikr = gkrmax*sqrt(K_o/5.4{mM})*xr*r*(V-EK);
    xrss = 1{dimensionless}/(1{dimensionless}+exp(-(V+10.085{mV})/4.25{mV}));
    tauxr = 1{ms}/(0.00138{per_mV}*(V+14.2{mV})/(1{dimensionless}-exp(-0.123{per_mV}*(V+14.2{mV})))+0.00061{per_mV}*(V+38.9{mV})/(exp(0.145{per_mV}*(V+38.9{mV}))-1{dimensionless}));
    ode(xr, time) = (xrss-xr)/tauxr;
  enddef;

  def comp IKs as
    var V: mV {pub: in};
    var Ca_i: mM {pub: in};
    var time: ms {pub: in};
    var EKs: mV {pub: in};
    var GKsmax: mS_per_uF {init: 0.433};
    var xs1: dimensionless {init: 0.0285147332973946};
    var xs2: dimensionless {init: 0.0764114040188678};
    var gks: mS_per_uF;
    var xss: dimensionless;
    var tauxs: ms;
    var iks: uA_per_uF {pub: out};
    gks = GKsmax*(1{dimensionless}+0.6{dimensionless}/(1{dimensionless}+pow(3.8e-5{mM}/Ca_i, 1.4{dimensionless})));
    xss = 1{dimensionless}/(1{dimensionless}+exp(-(V-1.5{mV})/16.7{mV}));
    tauxs = 1{ms}/(0.0000719{per_mV}*(V+30{mV})/(1{dimensionless}-exp(-0.148{per_mV}*(V+30{mV})))+0.000131{per_mV}*(V+30{mV})/(exp(0.0687{per_mV}*(V+30{mV}))-1{dimensionless}));
    iks = gks*xs1*xs2*(V-EKs);
    ode(xs1, time) = (xss-xs1)/tauxs;
    ode(xs2, time) = (xss-xs2)/tauxs/4{dimensionless};
  enddef;

  def comp INaK as
    var V: mV {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var K_o: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var kmnai: mM {init: 10};
    var kmko: mM {init: 1.5};
    var ibarnak: uA_per_uF {init: 2.25};
    var fnak: dimensionless;
    var sigma: dimensionless;
    var inak: uA_per_uF {pub: out};
    sigma = (exp(Na_o/67.3{mM})-1{dimensionless})/7{dimensionless};
    fnak = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FonRT)+0.0365{dimensionless}*sigma*exp(-V*FonRT));
    inak = ibarnak*fnak/(1{dimensionless}+sqr(kmnai/Na_i))/(1{dimensionless}+kmko/K_o);
  enddef;

  def comp INaCa as
    var V: mV {pub: in};
    var FonRT: per_mV {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var c1: uA_per_uF {init: 0.00025};
    var c2: dimensionless {init: 0.0001};
    var gammas: dimensionless {init: 0.15};
    var inaca: uA_per_uF {pub: out};
    inaca = c1*exp((gammas-1{dimensionless})*V*FonRT)*(exp(V*FonRT)*pow(Na_i, 3{dimensionless})*Ca_o-pow(Na_o, 3{dimensionless})*Ca_i)/(1{mM4}+c2*exp((gammas-1{dimensionless})*V*FonRT)*(exp(V*FonRT)*pow(Na_i, 3{dimensionless})*Ca_o+pow(Na_o, 3{dimensionless})*Ca_i));
  enddef;

  def comp IKp as
    var V: mV {pub: in};
    var EK: mV {pub: in};
    var GKpmax: mS_per_uF {init: 0.00552};
    var ikp: uA_per_uF {pub: out};
    ikp = GKpmax*(V-EK)/(1{dimensionless}+exp((7.488{mV}-V)/5.98{mV}));
  enddef;

  def comp IpCa as
    var Ca_i: mM {pub: in};
    var ibarpca: uA_per_uF {init: 1.15};
    var kmpca: mM {init: 0.0005};
    var ipca: uA_per_uF {pub: out};
    ipca = ibarpca*Ca_i/(kmpca+Ca_i);
  enddef;

  def comp ICab as
    var V: mV {pub: in};
    var gcab: mS_per_uF {init: 0.003016};
    var FonRT: per_mV {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var icab: uA_per_uF {pub: out};
    icab = gcab*(V-ln(Ca_o/Ca_i)/(2{dimensionless}*FonRT));
  enddef;

  def comp INab as
    var V: mV {pub: in};
    var ENa: mV {pub: in};
    var GNab: mS_per_uF {init: 0.004};
    var inab: uA_per_uF {pub: out};
    inab = GNab*(V-ENa);
  enddef;

  def comp ICaT as
    var time: ms {pub: in};
    var V: mV {pub: in};
    var ECa: mV {pub: in};
    var b: dimensionless {init: 0.000927461915392873};
    var g: dimensionless {init: 0.952834331760863};
    var gcat: mS_per_uF {init: 0.05};
    var bss: dimensionless;
    var taub: ms;
    var gss: dimensionless;
    var aa: dimensionless;
    var taug: ms;
    var icat: uA_per_uF {pub: out};
    icat = gcat*b*b*g*(V-ECa);
    bss = 1{dimensionless}/(1{dimensionless}+exp(-(V+14{mV})/10.8{mV}));
    taub = 3.7{ms}+6.1{ms}/(1{dimensionless}+exp((V+25{mV})/4.5{mV}));
    gss = 1{dimensionless}/(1{dimensionless}+exp((V+60{mV})/5.6{mV}));
    aa = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-V/0.0024{mV}));
    taug = aa*1{ms}*(-0.875{per_mV}*V+12{dimensionless})+12{ms}*(1{dimensionless}-aa);
    ode(b, time) = (bss-b)/taub;
    ode(g, time) = (gss-g)/taug;
  enddef;

  def comp reversal_potentials as
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var ENa: mV {pub: out};
    var ECa: mV {pub: out};
    var EK: mV {pub: out};
    var EKs: mV {pub: out};
    var prnak: dimensionless {init: 0.01833};
    ENa = ln(Na_o/Na_i)/FonRT;
    ECa = ln(Ca_o/Ca_i)/2{dimensionless}/FonRT;
    EK = ln(K_o/K_i)/FonRT;
    EKs = ln((K_o+prnak*Na_o)/(K_i+prnak*Na_i))/FonRT;
  enddef;

  def comp Irel as
    var time: ms {pub: in};
    var Ca_JSR_T: mM {pub: in};
    var Rel: mM_per_ms {pub: out, init: 1.06874246141923e-23};
    var Rel_ss: mM_per_ms;
    var tau_Rel: ms;
    var K_Relss: mM {init: 1};
    var alpha_Rel: mM_per_mV;
    var tau: ms {init: 4.75};
    var kappa: mM_per_mV_ms {init: 0.125};
    var qn: dimensionless {init: 9};
    var Ca_JSR_free: mM {pub: out};
    var bbb: mM;
    var c: mM2;
    var kmcsqn: mM {init: 0.8};
    var csqnbar: mM {init: 10};
    var ilca: uA_per_uF {pub: in};
    alpha_Rel = tau*kappa;
    bbb = csqnbar+kmcsqn-Ca_JSR_T;
    c = Ca_JSR_T*kmcsqn;
    Ca_JSR_free = -bbb/2{dimensionless}+sqrt(sqr(bbb)+4{dimensionless}*c)/2{dimensionless};
    Rel_ss = ilca*alpha_Rel/(1{dimensionless}+pow(K_Relss/Ca_JSR_free, qn));
    tau_Rel = tau/(1{dimensionless}+0.0123{mM}/Ca_JSR_free);
    ode(Rel, time) = -(Rel_ss+Rel)/tau_Rel;
  enddef;

  def comp Iup_Ileak as
    var Ca_i: mM {pub: in};
    var Ca_NSR: mM {pub: in};
    var kmup: mM {init: 0.00092};
    var iupbar: mM_per_ms {init: 0.00875};
    var nsrbar: mM {init: 15};
    var iup: mM_per_ms {pub: out};
    var ileak: mM_per_ms {pub: out};
    iup = iupbar*Ca_i/(Ca_i+kmup);
    ileak = iupbar*Ca_NSR/nsrbar;
  enddef;

  def comp Itr as
    var Ca_NSR: mM {pub: in};
    var Ca_JSR_free: mM {pub: in};
    var tautr: ms {init: 120};
    var itr: mM_per_ms {pub: out};
    itr = (Ca_NSR-Ca_JSR_free)/tautr;
  enddef;

  def comp Na as
    var time: ms {pub: in};
    var Na_i: mM {pub: out, init: 16.612739313555};
    var AF: uF_mole_per_C {pub: in};
    var vmyo: uL {pub: in};
    var naiont: uA_per_uF {pub: in};
    ode(Na_i, time) = -naiont*AF/vmyo;
  enddef;

  def comp K as
    var time: ms {pub: in};
    var K_i: mM {pub: out, init: 139.730914103161};
    var AF: uF_mole_per_C {pub: in};
    var vmyo: uL {pub: in};
    var kiont: uA_per_uF {pub: in};
    ode(K_i, time) = -kiont*AF/vmyo;
  enddef;

  def comp Ca as
    var time: ms {pub: in};
    var AF: uF_mole_per_C {pub: in};
    var vmyo: uL {pub: in};
    var vjsr: uL {pub: in};
    var vnsr: uL {pub: in};
    var caiont: uA_per_uF {pub: in};
    var Ca_T: mM {init: 0.0257059808595638};
    var Ca_JSR_T: mM {pub: out, init: 7.87371650296567};
    var Ca_NSR: mM {pub: out, init: 2.71518235696672};
    var Over: dimensionless {init: 1e-12};
    var iup: mM_per_ms {pub: in};
    var itr: mM_per_ms {pub: in};
    var ileak: mM_per_ms {pub: in};
    var Rel: mM_per_ms {pub: in};
    var cmdnbar: mM {init: 0.05};
    var trpnbar: mM {init: 0.07};
    var kmcmdn: mM {init: 0.00238};
    var kmtrpn: mM {init: 0.0005};
    var bmyo: mM;
    var cmyo: mM2;
    var dmyo: mM3;
    var Ca_i: mM {pub: out};
    bmyo = cmdnbar+trpnbar-Ca_T+kmtrpn+kmcmdn;
    cmyo = kmcmdn*kmtrpn-Ca_T*(kmtrpn+kmcmdn)+trpnbar*kmcmdn+cmdnbar*kmtrpn;
    dmyo = -kmtrpn*kmcmdn*Ca_T;
    Ca_i = 2{dimensionless}*sqrt(bmyo*bmyo-3{dimensionless}*cmyo)/3{dimensionless}*cos(acos((9{dimensionless}*bmyo*cmyo-2{dimensionless}*bmyo*bmyo*bmyo-27{dimensionless}*dmyo)/(2{dimensionless}*pow(bmyo*bmyo-3{dimensionless}*cmyo, 1.5{dimensionless})))/3{dimensionless})-bmyo/3{dimensionless};
    ode(Over, time) = 0{per_ms};
    ode(Ca_T, time) = -caiont*AF/(vmyo*2{dimensionless})+(ileak-iup)*vnsr/vmyo+Rel*vjsr/vmyo;
    ode(Ca_NSR, time) = iup-itr*vjsr/vnsr-ileak;
    ode(Ca_JSR_T, time) = itr-Rel;
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def group as containment for
    comp cell incl
      comp transmembrane_currents incl
        comp INa;
        comp ICaL;
        comp ICaT;
        comp IK1;
        comp IKr;
        comp IKs;
        comp INaK;
        comp INaCa;
        comp IKp;
        comp IpCa;
        comp ICab;
        comp INab;
      endcomp;
      comp intracellular_currents incl
        comp Irel;
        comp Iup_Ileak;
        comp Itr;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp Ca;
        comp Na;
        comp K;
        comp reversal_potentials;
      endcomp;
    endcomp;
  enddef;
  def map between cell and Environment for
    vars time and time;
    vars F and F;
  enddef;
  def map between reversal_potentials and Environment for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars Ca_o and Ca_o;
    vars FonRT and FonRT;
  enddef;
  def map between INa and Environment for
    vars time and time;
  enddef;
  def map between ICaL and Environment for
    vars time and time;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars K_o and K_o;
    vars F and F;
    vars FonRT and FonRT;
  enddef;
  def map between ICaT and Environment for
    vars time and time;
  enddef;
  def map between IKr and Environment for
    vars time and time;
    vars K_o and K_o;
  enddef;
  def map between IKs and Environment for
    vars time and time;
  enddef;
  def map between IK1 and Environment for
    vars K_o and K_o;
  enddef;
  def map between INaK and Environment for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars FonRT and FonRT;
  enddef;
  def map between INaCa and Environment for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
    vars FonRT and FonRT;
  enddef;
  def map between ICab and Environment for
    vars FonRT and FonRT;
    vars Ca_o and Ca_o;
  enddef;
  def map between Irel and Environment for
    vars time and time;
  enddef;
  def map between Ca and Environment for
    vars time and time;
  enddef;
  def map between Na and Environment for
    vars time and time;
  enddef;
  def map between K and Environment for
    vars time and time;
  enddef;
  def map between cell and INa for
    vars V and V;
    vars ina and ina;
  enddef;
  def map between cell and ICaL for
    vars V and V;
    vars ilca and ilca;
    vars ilcana and ilcana;
    vars ilcak and ilcak;
  enddef;
  def map between cell and IpCa for
    vars ipca and ipca;
  enddef;
  def map between cell and ICab for
    vars V and V;
    vars icab and icab;
  enddef;
  def map between cell and INab for
    vars V and V;
    vars inab and inab;
  enddef;
  def map between cell and ICaT for
    vars V and V;
    vars icat and icat;
  enddef;
  def map between cell and IKr for
    vars V and V;
    vars ikr and ikr;
  enddef;
  def map between cell and IKs for
    vars V and V;
    vars iks and iks;
  enddef;
  def map between cell and IKp for
    vars V and V;
    vars ikp and ikp;
  enddef;
  def map between cell and IK1 for
    vars V and V;
    vars IK1 and IK1;
  enddef;
  def map between cell and INaK for
    vars V and V;
    vars inak and inak;
  enddef;
  def map between cell and INaCa for
    vars V and V;
    vars inaca and inaca;
  enddef;
  def map between cell and Na for
    vars naiont and naiont;
    vars AF and AF;
    vars vmyo and vmyo;
  enddef;
  def map between cell and K for
    vars kiont and kiont;
    vars AF and AF;
    vars vmyo and vmyo;
  enddef;
  def map between cell and Ca for
    vars AF and AF;
    vars vmyo and vmyo;
    vars vjsr and vjsr;
    vars vnsr and vnsr;
    vars caiont and caiont;
  enddef;
  def map between reversal_potentials and IK1 for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and IKr for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and IKp for
    vars EK and EK;
  enddef;
  def map between reversal_potentials and IKs for
    vars EKs and EKs;
  enddef;
  def map between reversal_potentials and INa for
    vars ENa and ENa;
  enddef;
  def map between reversal_potentials and INab for
    vars ENa and ENa;
  enddef;
  def map between reversal_potentials and ICaT for
    vars ECa and ECa;
  enddef;
  def map between reversal_potentials and Na for
    vars Na_i and Na_i;
  enddef;
  def map between reversal_potentials and K for
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between INaK and Na for
    vars Na_i and Na_i;
  enddef;
  def map between INaCa and Na for
    vars Na_i and Na_i;
  enddef;
  def map between INaCa and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between IpCa and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between ICab and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between ICaL and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between ICaL and Na for
    vars Na_i and Na_i;
  enddef;
  def map between ICaL and K for
    vars K_i and K_i;
  enddef;
  def map between IKs and Ca for
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca and Irel for
    vars Rel and Rel;
    vars Ca_JSR_T and Ca_JSR_T;
  enddef;
  def map between Ca and Iup_Ileak for
    vars iup and iup;
    vars ileak and ileak;
    vars Ca_i and Ca_i;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between Ca and Itr for
    vars itr and itr;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between ICaL and Irel for
    vars ilca and ilca;
  enddef;
  def map between Irel and Itr for
    vars Ca_JSR_free and Ca_JSR_free;
  enddef;
enddef;
// rdf:#884ca9ba-dec8-491b-811f-d9a05761390e
// li: myocyte
// li: calcium
// li: cardiac
// li: electrophysiology
// rdf:#a8c2473f-2dfd-4609-ac9b-050dbfcffb78
// li: Given Leonid; Family Livshitz; Other M
// li: Given Yoram; Family Rudy
// rdf:#f8533918-86a3-424c-a249-3f9cc8da53f0
// creator: FN Catherine Lloyd
// value: This is a CellML description of Livshitz and Rudy's 2007 mathematical model describing the regulation of Ca2+ and electrical alternans in cardiac myocytes.
// rdf:#e15a239c-1a12-4294-9067-cdabd8f13c40
// subject_type: keyword
// #irvine_model_1999
// title: Livshitz and Rudy's 2007 mathematical model describing the regulation of Ca2+ and electrical alternans in cardiac myocytes.
// reference: Pubmed_id 17277017; title Regulation of Ca2+ and electrical alternans in cardiac myocytes: role of CAMKII and repolarizing currents; volume 292; first_page H2854; title American Journal of Physiology: Heart and Circulatory Physiology; W3CDTF 2007-06; last_page H2866
