<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 8/12/2009 at 10:36:31 at a.m. using:

COR (0.9.31.1351)
Copyright 2002-2009 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="li_1996" cmeta:id="li_1996" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">	
	
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Modeling N-methyl-D-aspartate-induced bursting in dopamine neurons</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>This is the more elaborate model based on the equations in the the appendix of the paper. The CellML model runs in both COR and OpenCell and the units are consistent, however it is unable to recreate the figures in the published paper.</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				
				<para>ABSTRACT: Burst firing of dopaminergic neurons of the substantia nigra pars compacta can be induced in vitro by the glutamate agonist N-methyl-D-aspartate. It has been suggested that the interburst hyperpolarization is due to Na+ extrusion by a ouabain-sensitive pump (Johnson et al. (1992) Science 258, 665-667). We formulate and explore a theoretical model, with a minimal number of currents, for this novel mechanism of burst generation. This minimal model is further developed into a more elaborate model based on observations of additional currents and hypotheses about their spatial distribution in dopaminergic neurons (Hounsgaard (1992) Neuroscience 50, 513-518; Llinas et al. (1984) Brain Res. 294, 127-132). Using the minimal model, we confirm that interaction between the regenerative, inward N-methyl-D-aspartate-mediated current and the outward Na(+)-pump current is sufficient to generate the slow oscillation (approximately 0.5 Hz) underlying the burst. The negative-slope region of the N-methyl-D-aspartate channel's current-voltage relation is indispensable for this slow rhythm generation. The time-scale of Na(+)-handling determines the burst's slow frequency. Moreover, we show that, given the constraints of sodium handling, such bursting is best explained mechanistically by using at least two spatial, cable-like compartments: a soma where action potentials are produced and a dendritic compartment where the slow rhythm is generated. Our result is consistent with recent experimental evidence that burst generation originates in distal dendrites (Seutin et al. (1994) Neuroscience 58, 201-206). Responses of the model to a number of electrophysiological and pharmacological stimuli are consistent with known responses observed under similar conditions. These include the persistence of the slow rhythm when the tetrodotoxin-sensitive Na+ channel is blocked and when the soma is voltage-clamped at -60 mV. Using our more elaborate model, we account for details of the observed frequency adaptation in N-methyl-D-aspartate-induced bursting, the origin of multiple spiking and bursting mechanisms, and the interaction between two different bursting mechanisms. Besides reproducing several well established firing patterns, this model also suggests that new firing modes, not yet recorded, might also occur in dopaminergic neurons. This model provides mechanistic insights and explanations into the origin of a variety of experimentally observed membrane potential firing patterns in dopaminergic neurons, including N-methyl-D-aspartate-induced bursting and its dendritic origin. Such a model, capable of reproducing a number of realistic behaviors of dopaminergic neurons, could be useful in further studies of the basal ganglia-thalamocortical motor circuit. It may also shed light on bursting that involves N-methyl-D-aspartate channel activity in other neuron types.</para>
				
				<para>The original paper reference is cited below.</para>
				
				<para>Modeling N-methyl-D-aspartate-induced bursting in dopamine neurons, Y.X. Li, R. Bertram, and J. Rinzel, 1996,
                                    <emphasis>Neuroscience</emphasis>, 71, 397-410. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/9053795">PubMed ID: 9053795</ulink>
				</para>
				<informalfigure float="0" id="fig_cell_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>cell schematic for the model</title>
							</objectinfo>
							<imagedata fileref="li_1996.png"/>
						</imageobject>
					</mediaobject>
					<caption> Schematic representation of the minimal model of a DA neuron. It consists of a spike-producing compartment(soma) and a slow rhythm-generating compartment (lumped dendrite). The two compartments are electrotonically coupled with coupling conductance gc. The types of ionic channels considered are just sufficient for a qualitative understanding of the mechanism underlying NMDA-induced bursting in DA neurons. No voltage-dependent channels other than the NMDA channel are considered in the dendrite in this minimal model.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation> 	
	
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millisecond_per_second">
      <unit units="second" prefix="milli"/>
      <unit units="second" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_second">
      <unit units="second" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mM">
      <unit units="mole" prefix="milli"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="uM">
      <unit units="mole" prefix="micro"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mV">
      <unit units="volt" prefix="milli"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="cm2">
      <unit units="meter" prefix="centi" exponent="2"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="uF">
      <unit units="farad" prefix="micro"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="uA">
      <unit units="ampere" prefix="micro"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="nA">
      <unit units="ampere" prefix="nano"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="uF_per_cm2">
      <unit units="uF"/>
      <unit units="cm2" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mS_per_cm2">
      <unit units="siemens" prefix="milli"/>
      <unit units="cm2" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="uA_per_cm2">
      <unit units="ampere" prefix="micro"/>
      <unit units="cm2" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="mMcm2_per_uAs">
      <unit units="mM"/>
      <unit units="cm2"/>
      <unit units="uA" exponent="-1"/>
      <unit units="second" exponent="-1"/>
   </units>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="second" public_interface="out"/>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="soma_compartment">
      <variable name="V_s" units="mV" initial_value="-64.0" public_interface="out"/>
      <variable name="V_Na" units="mV" initial_value="55" public_interface="out"/>
      
	  <variable name="I_Na_s" units="uA_per_cm2"/>
      <variable name="I_K_DR_s" units="uA_per_cm2"/>
      <variable name="I_Ca_T" units="uA_per_cm2"/>
      <variable name="I_K_Ca" units="uA_per_cm2"/>
      <variable name="I_A" units="uA_per_cm2"/>
      <variable name="I_h" units="uA_per_cm2"/>
      <variable name="g_Na_s" units="mS_per_cm2" initial_value="3.2"/>
      <variable name="g_K_DR_s" units="mS_per_cm2" initial_value="6.4"/>
      <variable name="g_Ca_T" units="mS_per_cm2" initial_value="1.5"/>
      <variable name="g_K_Ca" units="mS_per_cm2" initial_value="1.2"/>
      <variable name="g_A" units="mS_per_cm2" initial_value="2"/>
      <variable name="g_h" units="mS_per_cm2" initial_value="0.1"/>
      <variable name="Ca" units="mM" initial_value="0"/>
      <variable name="k_Ca" units="per_second" initial_value="1"/>
      <variable name="K_Ca" units="mM" initial_value="0.0004"/>
      <variable name="V_h" units="mV" initial_value="-30"/>
      <variable name="beta" units="mMcm2_per_uAs" initial_value="0.104"/>
      <variable name="I_APP" units="uA_per_cm2" initial_value="-6.7"/>
      
	  <variable name="V_Ca" units="mV" public_interface="in"/>
      <variable name="V_K" units="mV" public_interface="in"/>
      <variable name="n" units="dimensionless" public_interface="in"/>
      <variable name="h" units="dimensionless" public_interface="in"/>
      <variable name="m_infinity" units="dimensionless" public_interface="in"/>
      <variable name="g_c" units="mS_per_cm2" public_interface="in"/>
      <variable name="p" units="dimensionless" public_interface="in"/>
      <variable name="V_D" units="mV" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <variable name="C_m" units="uF_per_cm2" public_interface="in"/>
      <variable name="m_T" units="dimensionless" public_interface="in"/>
      <variable name="h_T" units="dimensionless" public_interface="in"/>
      <variable name="a" units="dimensionless" public_interface="in"/>
      <variable name="b" units="dimensionless" public_interface="in"/>
      <variable name="m_h" units="dimensionless" public_interface="in"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_Na_s</ci>
            <apply>
               <times/>
               <ci>g_Na_s</ci>
               <ci>h</ci>
               <apply>
                  <minus/>
                  <ci>V_s</ci>
                  <ci>V_Na</ci>
               </apply>
               <apply>
                  <power/>
                  <ci>m_infinity</ci>
                  <cn cellml:units="dimensionless">3</cn>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>I_K_DR_s</ci>
            <apply>
               <times/>
               <ci>g_K_DR_s</ci>
               <apply>
                  <minus/>
                  <ci>V_s</ci>
                  <ci>V_K</ci>
               </apply>
               <apply>
                  <power/>
                  <ci>n</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>I_Ca_T</ci>
            <apply>
               <times/>
               <ci>g_Ca_T</ci>
               <ci>h_T</ci>
               <apply>
                  <minus/>
                  <ci>V_s</ci>
                  <ci>V_Ca</ci>
               </apply>
               <apply>
                  <power/>
                  <ci>m_T</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
		 
         <apply>
            <eq/>
            <ci>I_K_Ca</ci>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>g_K_Ca</ci>
                     <apply>
                        <power/>
                        <ci>Ca</ci>
                        <cn cellml:units="dimensionless">4</cn>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <power/>
                        <ci>Ca</ci>
                        <cn cellml:units="dimensionless">4</cn>
                     </apply>
                     <apply>
                        <power/>
                        <ci>K_Ca</ci>
                        <cn cellml:units="dimensionless">4</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <ci>V_s</ci>
                  <ci>V_K</ci>
               </apply>
            </apply>
         </apply>
		 
         <apply>
            <eq/>
            <ci>I_A</ci>
            <apply>
               <times/>
               <ci>g_A</ci>
               <ci>b</ci>
               <apply>
                  <minus/>
                  <ci>V_s</ci>
                  <ci>V_K</ci>
               </apply>
               <apply>
                  <power/>
                  <ci>a</ci>
                  <cn cellml:units="dimensionless">4</cn>
               </apply>
            </apply>
         </apply>
		 
         <apply>
            <eq/>
            <ci>I_h</ci>
            <apply>
               <times/>
               <ci>g_h</ci>
               <ci>m_h</ci>
               <apply>
                  <minus/>
                  <ci>V_s</ci>
                  <ci>V_h</ci>
               </apply>
            </apply>
         </apply>
		 
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V_s</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <times/>
				  <cn cellml:units="millisecond_per_second">1000.0</cn>
				  <apply>
                     <minus/>
				     <ci>I_APP</ci>
                     <apply>
					    <plus/>
                        <ci>I_Na_s</ci>
					    <ci>I_Ca_T</ci>
						<ci>I_K_DR_s</ci>
					    <ci>I_K_Ca</ci>
						<ci>I_A</ci>
					    <ci>I_h</ci>
                        <apply>
                           <times/>
                           <apply>
                              <divide/>
                              <ci>g_c</ci>
                              <ci>p</ci>
                           </apply>
                           <apply>
                              <minus/>
                              <ci>V_s</ci>
                              <ci>V_D</ci>
						   </apply>
                        </apply>
                     </apply>
                  </apply>
			   </apply>
               <ci>C_m</ci>
            </apply>
         </apply>
		 
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca</ci>
            </apply>
            <apply>
               <minus/>
			   <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>beta</ci>
                     <ci>I_Ca_T</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_Ca</ci>
                     <ci>Ca</ci>
				  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="dendritic_compartment">
      <variable name="V_D" units="mV" initial_value="-77.0" public_interface="out"/>
      
	  <variable name="Na" units="mM" initial_value="5.09"/>
      <variable name="K_p" units="mM" initial_value="15"/>
      <variable name="I_L" units="uA_per_cm2"/>
      <variable name="I_pump" units="uA_per_cm2"/>
      <variable name="R_pump" units="uA_per_cm2" initial_value="18"/>
      <variable name="Na_eq" units="mM" initial_value="8"/>
      <variable name="phi_Na" units="dimensionless"/>
      <variable name="phi_Na_eq" units="dimensionless"/>
      <variable name="alpha" units="mMcm2_per_uAs" initial_value="0.173"/>
      <variable name="I_NMDA" units="uA_per_cm2"/>
      <variable name="I_Na_NMDA" units="uA_per_cm2"/>
      <variable name="g_NMDA" units="mS_per_cm2" initial_value="25"/>
      <variable name="g_Na_NMDA" units="mS_per_cm2" initial_value="5"/>
      <variable name="g_L" units="mS_per_cm2" initial_value="0.18"/>
      <variable name="Mg_o" units="mM" initial_value="1.4"/>
      <variable name="K_Mg" units="mM" initial_value="10"/>
      <variable name="q" units="mV" initial_value="12.5"/>
      <variable name="V_NMDA" units="mV" initial_value="0"/>
      <variable name="V_Na" units="mV" public_interface="in"/>
      <variable name="V_L" units="mV" initial_value="-50"/>
      <variable name="I_D" units="uA_per_cm2"/>
      <variable name="I_Ca_L" units="uA_per_cm2"/>
      <variable name="g_Ca_L" units="mS_per_cm2" initial_value="0.19"/>
      <variable name="g_K_DR_D" units="mS_per_cm2" initial_value="0.14"/>
      <variable name="I_K_DR_D" units="uA_per_cm2"/>
      
	  <variable name="g_c" units="mS_per_cm2" public_interface="in"/>
      <variable name="p" units="dimensionless" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <variable name="C_m" units="uF_per_cm2" public_interface="in"/>
      <variable name="V_s" units="mV" public_interface="in"/>
      <variable name="V_Ca" units="mV" public_interface="in"/>
      <variable name="m_L" units="dimensionless" public_interface="in"/>
      <variable name="V_K" units="mV" public_interface="in"/>
      <variable name="n" units="dimensionless" public_interface="in"/>
     
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_K_DR_D</ci>
            <apply>
               <times/>
               <ci>g_K_DR_D</ci>
               <apply>
                  <minus/>
                  <ci>V_D</ci>
                  <ci>V_K</ci>
               </apply>
               <apply>
                  <power/>
                  <ci>n</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>phi_Na</ci>
            <apply>
               <divide/>
               <apply>
                  <power/>
                  <ci>Na</ci>
                  <cn cellml:units="dimensionless">3</cn>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <power/>
                     <ci>Na</ci>
                     <cn cellml:units="dimensionless">3</cn>
                  </apply>
                  <apply>
                     <power/>
                     <ci>K_p</ci>
                     <cn cellml:units="dimensionless">3</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>phi_Na_eq</ci>
            <apply>
               <divide/>
               <apply>
                  <power/>
                  <ci>Na_eq</ci>
                  <cn cellml:units="dimensionless">3</cn>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <power/>
                     <ci>Na_eq</ci>
                     <cn cellml:units="dimensionless">3</cn>
                  </apply>
                  <apply>
                     <power/>
                     <ci>K_p</ci>
                     <cn cellml:units="dimensionless">3</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>I_pump</ci>
            <apply>
               <times/>
               <ci>R_pump</ci>
               <apply>
                  <minus/>
                  <ci>phi_Na</ci>
                  <ci>phi_Na_eq</ci>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>I_L</ci>
            <apply>
               <times/>
               <ci>g_L</ci>
               <apply>
                  <minus/>
                  <ci>V_D</ci>
                  <ci>V_L</ci>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>I_NMDA</ci>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <ci>g_NMDA</ci>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <apply>
                           <divide/>
                           <ci>Mg_o</ci>
                           <ci>K_Mg</ci>
                        </apply>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <minus/>
                                 <ci>V_D</ci>
                              </apply>
                              <ci>q</ci>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <ci>V_D</ci>
                  <ci>V_NMDA</ci>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>I_Na_NMDA</ci>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <ci>g_Na_NMDA</ci>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <times/>
                        <apply>
                           <divide/>
                           <ci>Mg_o</ci>
                           <ci>K_Mg</ci>
                        </apply>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <minus/>
                                 <ci>V_D</ci>
                              </apply>
                              <ci>q</ci>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <ci>V_D</ci>
                  <ci>V_Na</ci>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>I_D</ci>
            <apply>
               <plus/>
               <ci>I_NMDA</ci>
               <ci>I_pump</ci>
               <ci>I_L</ci>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <ci>I_Ca_L</ci>
            <apply>
               <times/>
               <ci>g_Ca_L</ci>
               <apply>
                  <minus/>
                  <ci>V_D</ci>
                  <ci>V_Ca</ci>
               </apply>
               <apply>
                  <power/>
                  <ci>m_L</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
         
		 <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V_D</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
					 <cn cellml:units="millisecond_per_second">1000.0</cn>
					 <apply>
                        <plus/>
                        <ci>I_Ca_L</ci>
					    <ci>I_K_DR_D</ci>
					    <ci>I_NMDA</ci>
						<ci>I_pump</ci>
					    <ci>I_L</ci>
                        <apply>
                           <times/>
                           <apply>
                              <divide/>
                              <ci>g_c</ci>
                              <apply>
                                 <minus/>
                                 <cn cellml:units="dimensionless">1</cn>
                                 <ci>p</ci>
                              </apply>
                           </apply>
					       <apply>
                              <minus/>
                              <ci>V_D</ci>
                              <ci>V_s</ci>
						   </apply>
						</apply>
                     </apply>
                  </apply>
               </apply>
               <ci>C_m</ci>
            </apply>
		 </apply>
		 
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Na</ci>
            </apply>
            <apply>
               <times/>
               <ci>alpha</ci>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>I_Na_NMDA</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>I_pump</ci>
                     <cn cellml:units="dimensionless">3</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="general_variables">
      <variable name="C_m" units="uF_per_cm2" initial_value="1" public_interface="out"/>
      <variable name="g_c" units="mS_per_cm2" initial_value="0.1" public_interface="out"/>
      <variable name="p" units="dimensionless" initial_value="0.5" public_interface="out"/>
      <variable name="V_Ca" units="mV" initial_value="120" public_interface="out"/>
      <variable name="V_K" units="mV" initial_value="-85" public_interface="out"/>
   </component>
   
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="gating_variables">
      <variable name="m_infinity" units="dimensionless" public_interface="out"/>
      <variable name="m_T_infinity" units="dimensionless" public_interface="out"/>
      <variable name="h_T_infinity" units="dimensionless" public_interface="out"/>
      <variable name="a_infinity" units="dimensionless" public_interface="out"/>
      <variable name="b_infinity" units="dimensionless" public_interface="out"/>
      <variable name="m_h_infinity" units="dimensionless" public_interface="out"/>
      <variable name="n" units="dimensionless" initial_value="0.002" public_interface="out"/>
      <variable name="h" units="dimensionless" initial_value="1.0" public_interface="out"/>
      <variable name="m_T" units="dimensionless" initial_value="0.1" public_interface="out"/>
      <variable name="m_L" units="dimensionless" initial_value="0.1" public_interface="out"/>
      <variable name="m_h" units="dimensionless" initial_value="0.1" public_interface="out"/>
      <variable name="a" units="dimensionless" initial_value="0.1" public_interface="out"/>
      <variable name="b" units="dimensionless" initial_value="0.1" public_interface="out"/>
      <variable name="h_T" units="dimensionless" initial_value="0.1" public_interface="out"/>
      
	  <variable name="m_L_infinity" units="dimensionless"/>
	  <variable name="n_infinity" units="dimensionless"/>
      <variable name="h_infinity" units="dimensionless"/>
      <variable name="tau_h" units="second"/>
      <variable name="tau_n" units="second"/>
      <variable name="tau_m_T" units="second"/>
      <variable name="tau_h_T" units="second"/>
      <variable name="tau_m_L" units="second"/>
      <variable name="tau_a" units="second"/>
      <variable name="tau_b" units="second"/>
      <variable name="tau_m_h" units="second"/>
      
	  <variable name="time" units="second" public_interface="in"/>
      <variable name="V_s" units="mV" public_interface="in"/>
      <variable name="V_D" units="mV" public_interface="in"/>
      
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>m_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V_s</ci>
                              <cn cellml:units="mV">35</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">6.2</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>n_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V_s</ci>
                              <cn cellml:units="mV">31</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">5.3</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>h_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V_s</ci>
                           <cn cellml:units="mV">30</cn>
                        </apply>
                        <cn cellml:units="mV">8.3</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>m_T_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V_s</ci>
                              <cn cellml:units="mV">55</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">7</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>h_T_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V_s</ci>
                           <cn cellml:units="mV">81</cn>
                        </apply>
                        <cn cellml:units="mV">11</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>a_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V_s</ci>
                              <cn cellml:units="mV">60</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">10</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>b_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V_s</ci>
                           <cn cellml:units="mV">70</cn>
                        </apply>
                        <cn cellml:units="mV">5.7</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>m_h_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V_s</ci>
                           <cn cellml:units="mV">80</cn>
                        </apply>
                        <cn cellml:units="mV">8</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>m_L_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V_D</ci>
                              <cn cellml:units="mV">20</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">5.3</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_h</ci>
            <apply>
               <times/>
               <cn cellml:units="second">0.4</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <divide/>
                     <cn cellml:units="dimensionless">2</cn>
                     <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <plus/>
                                 <ci>V_s</ci>
                                 <cn cellml:units="mV">25</cn>
                              </apply>
                              <cn cellml:units="mV">5</cn>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_n</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="second">0.8</cn>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">2</cn>
                        <apply>
                           <plus/>
                           <cn cellml:units="dimensionless">1</cn>
                           <apply>
                              <exp/>
                              <apply>
                                 <divide/>
                                 <apply>
                                    <plus/>
                                    <ci>V_s</ci>
                                    <cn cellml:units="mV">25</cn>
                                 </apply>
                                 <cn cellml:units="mV">10</cn>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V_s</ci>
                              <cn cellml:units="mV">70</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">10</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_m_L</ci>
            <apply>
               <divide/>
               <cn cellml:units="second">0.4</cn>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">5</cn>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <minus/>
                              <apply>
                                 <plus/>
                                 <ci>V_D</ci>
                                 <cn cellml:units="mV">11</cn>
                              </apply>
                           </apply>
                           <cn cellml:units="mV">8.3</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V_D</ci>
                              <cn cellml:units="mV">11</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">8.3</cn>
                     </apply>
                     <apply>
                        <minus/>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <minus/>
                                 <apply>
                                    <plus/>
                                    <ci>V_D</ci>
                                    <cn cellml:units="mV">11</cn>
                                 </apply>
                              </apply>
                              <cn cellml:units="mV">8.3</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_m_T</ci>
            <cn cellml:units="second">1</cn>
         </apply>
         <apply>
            <eq/>
            <ci>tau_h_T</ci>
            <cn cellml:units="second">10</cn>
         </apply>
         <apply>
            <eq/>
            <ci>tau_a</ci>
            <cn cellml:units="second">0.5</cn>
         </apply>
         <apply>
            <eq/>
            <ci>tau_b</ci>
            <cn cellml:units="second">10</cn>
         </apply>
         <apply>
            <eq/>
            <ci>tau_m_h</ci>
            <cn cellml:units="second">190</cn>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>h_infinity</ci>
                  <ci>h</ci>
               </apply>
               <ci>tau_h</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>n_infinity</ci>
                  <ci>n</ci>
               </apply>
               <ci>tau_n</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m_T</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>m_T_infinity</ci>
                  <ci>m_T</ci>
               </apply>
               <ci>tau_m_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m_L</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>m_L_infinity</ci>
                  <ci>m_L</ci>
               </apply>
               <ci>tau_m_L</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m_h</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>m_h_infinity</ci>
                  <ci>m_h</ci>
               </apply>
               <ci>tau_m_h</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>a</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>a_infinity</ci>
                  <ci>a</ci>
               </apply>
               <ci>tau_a</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>b</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>b_infinity</ci>
                  <ci>b</ci>
               </apply>
               <ci>tau_b</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h_T</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>h_T_infinity</ci>
                  <ci>h_T</ci>
               </apply>
               <ci>tau_h_T</ci>
            </apply>
         </apply>
      </math>
   </component>
   
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="environment" component_2="soma_compartment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="environment" component_2="dendritic_compartment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="environment" component_2="gating_variables"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="general_variables" component_2="soma_compartment"/>
      <map_variables variable_1="C_m" variable_2="C_m"/>
      <map_variables variable_1="g_c" variable_2="g_c"/>
      <map_variables variable_1="p" variable_2="p"/>
      <map_variables variable_1="V_Ca" variable_2="V_Ca"/>
      <map_variables variable_1="V_K" variable_2="V_K"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="general_variables" component_2="dendritic_compartment"/>
      <map_variables variable_1="C_m" variable_2="C_m"/>
      <map_variables variable_1="g_c" variable_2="g_c"/>
      <map_variables variable_1="p" variable_2="p"/>
      <map_variables variable_1="V_Ca" variable_2="V_Ca"/>
      <map_variables variable_1="V_K" variable_2="V_K"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="gating_variables" component_2="soma_compartment"/>
      <map_variables variable_1="V_s" variable_2="V_s"/>
      <map_variables variable_1="n" variable_2="n"/>
      <map_variables variable_1="h" variable_2="h"/>
      <map_variables variable_1="m_infinity" variable_2="m_infinity"/>
      <map_variables variable_1="m_T" variable_2="m_T"/>
      <map_variables variable_1="h_T" variable_2="h_T"/>
      <map_variables variable_1="a" variable_2="a"/>
      <map_variables variable_1="b" variable_2="b"/>
      <map_variables variable_1="m_h" variable_2="m_h"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="dendritic_compartment" component_2="gating_variables"/>
      <map_variables variable_1="V_D" variable_2="V_D"/>
      <map_variables variable_1="m_L" variable_2="m_L"/>
      <map_variables variable_1="n" variable_2="n"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="dendritic_compartment" component_2="soma_compartment"/>
      <map_variables variable_1="V_D" variable_2="V_D"/>
	  <map_variables variable_1="V_s" variable_2="V_s"/>
      <map_variables variable_1="V_Na" variable_2="V_Na"/>
   </connection>
   
   <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
    
	<rdf:Description rdf:about="">
      <dc:title>
            Modeling N-methyl-D-aspartate-induced bursting in dopamine neurons (complex model based on the equations in the published paper)
          </dc:title>
	  <dc:creator rdf:parseType="Resource">
        <vCard:N rdf:parseType="Resource">
          <vCard:Family>Paris</vCard:Family>
          <vCard:Given>Tessa</vCard:Given>
		</vCard:N>
        <vCard:EMAIL rdf:parseType="Resource">
          <rdf:value>tpar054@aucklanduni.ac.nz</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland</vCard:Orgname>
          <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
  
      <dcterms:created rdf:parseType="Resource">
        <dcterms:W3CDTF>2010-03-22</dcterms:W3CDTF>
      </dcterms:created>
    </rdf:Description>
    
    <rdf:Description rdf:about="#li_1996">
      
	  <cmeta:bio_entity>neuron</cmeta:bio_entity>
	  
      <bqs:reference rdf:parseType="Resource">
        <dc:subject rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>electrophysiology</rdf:li>
			  <rdf:li>neuron</rdf:li>
			  <rdf:li>neurobiology</rdf:li>
			  <rdf:li>bursting</rdf:li>
			  <rdf:li>dopamine</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>

      <bqs:reference rdf:parseType="Resource">
        <bqs:Pubmed_id>9053795</bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator>
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Li</vCard:Family>
                    <vCard:Given>Y</vCard:Given>
					<vCard:Other>X</vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Bertram</vCard:Family>
                    <vCard:Given>R</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N rdf:parseType="Resource">
                    <vCard:Family>Rinzel</vCard:Family>
                    <vCard:Given>J</vCard:Given>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title>
            Modeling N-methyl-D-aspartate-induced bursting in dopamine neurons
          </dc:title>
          <dcterms:issued rdf:parseType="Resource">
            <dcterms:W3CDTF>1996-03</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title>Neuroscience</dc:title>
          </bqs:Journal>
		  <bqs:volume>71</bqs:volume>
          <bqs:first_page>397</bqs:first_page>
          <bqs:last_page>410</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
</model>

