// This CellML file was generated on 11/12/2007 at 15:38:26 using:
//
// COR (0.9.31.833)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// comment: This file is a CellML description of Iyer et al's model of the human left ventricular epicardial myocyte as described in the paper "A Computational model of the human left-ventricular epicardial myocyte"; FN James Lawson
// reference: Pubmed_id 15345532; Family Iyer; Given V; Family Mazhari; Given R; Family Winslow; Given R; Other L; volume 87(3); title A computational model of the human left-ventricular epicardial myocyte; W3CDTF 2004-09-00 00:00; first_page 1507; last_page 1525; title Biophysical Journal
// simulation: algorithm bdf15; endingValue 5000; pointDensity 10000
def model iyer_2004 as
  // A computational model of the human left-ventricular epicardial myocyte
  //
  // Steven Niederer
  //
  // Department of Physiology, Anatomy and Genetics, Oxford University
  //
  // Model Status
  //
  // This CellML model runs in OpenCell and COR to reproduce the published results. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: A computational model of the human left-ventricular epicardial myocyte is presented. Models of each of the major ionic currents present in these cells are formulated and validated using experimental data obtained from studies of recombinant human ion channels and/or whole-cell recording from single myocytes isolated from human left-ventricular subepicardium. Continuous-time Markov chain models for the gating of the fast Na(+) current, transient outward current, rapid component of the delayed rectifier current, and the L-type calcium current are modified to represent human data at physiological temperature. A new model for the gating of the slow component of the delayed rectifier current is formulated and validated against experimental data. Properties of calcium handling and exchanger currents are altered to appropriately represent the dynamics of intracellular ion concentrations. The model is able to both reproduce and predict a wide range of behaviors observed experimentally including action potential morphology, ionic currents, intracellular calcium transients, frequency dependence of action-potential duration, Ca(2+)-frequency relations, and extrasystolic restitution/post-extrasystolic potentiation. The model therefore serves as a useful tool for investigating mechanisms of arrhythmia and consequences of drug-channel interactions in the human left-ventricular myocyte.
  //
  // The original paper reference is cited below:
  //
  // A computational model of the human left-ventricular epicardial myocyte, Vivek Iyer, Reza Mazhari and Raimond L. Winslow, 2004, Biophysical Journal, 87, 1507-1525. PubMed ID: 15345532 (http://www.ncbi.nlm.nih.gov/pubmed/15345532)
  //
  // cell diagram
  //
  // A schematic diagram describing the ion movement across the cell surface membrane and the sarcoplasmic reticulum, which are described by the Iyer et al. 2004 mathematical model of the human left-ventricular epicardial myocyte.
  def unit m2u as
    unit second {pref: micro};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit micrometer as
    unit metre {pref: micro};
  enddef;
  def unit L as
    unit litre;
  enddef;
  def unit uL as
    unit litre {pref: micro};
  enddef;
  def unit N_per_mm2 as
    unit newton;
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit mm as
    unit meter {pref: milli};
  enddef;
  def unit cm as
    unit meter {pref: centi};
  enddef;
  def unit cm_per_s as
    unit cm;
    unit second {expo: -1};
  enddef;
  def unit mm3 as
    unit mm {expo: 3};
  enddef;
  def unit mm2 as
    unit mm {expo: 2};
  enddef;
  def unit cm2 as
    unit cm {expo: 2};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit mS as
    unit siemens {pref: milli};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit uA_per_uF as
    unit uA;
    unit uF {expo: -1};
  enddef;
  def unit mS_per_uF as
    unit mS;
    unit uF {expo: -1};
  enddef;
  def unit pF as
    unit farad {pref: pico};
  enddef;
  def unit mF as
    unit farad {pref: milli};
  enddef;
  def unit mF_per_cm2 as
    unit farad {pref: milli};
    unit cm2 {expo: -1};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit mm2 {expo: -1};
  enddef;
  def unit F_M_per_coulomb as
    unit farad;
    unit molar;
    unit coulomb {expo: -1};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit mM3 as
    unit mM {expo: 3};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit per_uM3_per_ms as
    unit uM {expo: -3};
    unit ms {expo: -1};
  enddef;
  def unit per_uM4_per_ms as
    unit uM {expo: -4};
    unit ms {expo: -1};
  enddef;
  def unit litre_per_farad_second as
    unit litre;
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit joule_per_kelvin as
    unit joule;
    unit kelvin {expo: -1};
  enddef;
  def unit joule_ms as
    unit joule;
    unit ms;
  enddef;
  def unit joule_per_mole as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit ms {expo: -1};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
  // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
  def comp COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES as
    var a1: F_M_per_coulomb;
    var a2: F_M_per_coulomb;
    var Faraday: coulomb_per_millimole {init: 96.5, pub: out};
    var Temp: kelvin {init: 310};
    var Rgas: joule_per_mole_kelvin {init: 8.315, pub: out};
    var RT_over_F: mV {pub: out};
    var Acap: cm2 {init: 1.534e-4};
    var C: mF;
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:67196
    var Vmyo: uL {init: 25.84e-6};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    var VJSR: uL {init: 0.16e-6};
    var VNSR: uL {init: 2.1e-6};
    var VSS: uL {init: 1.2e-9};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: mM {init: 0.9798304162e1, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ki: mM {init: 0.1255589432e3, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cai: mM {init: 0.8601192016e-4, pub: out};
    var CaSS: mM {init: 0.1420215245e-3, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var CaJSR: mM {init: 0.2852239446, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    var CaNSR: mM {init: 0.2855294915, pub: out};
    var V: mV {init: -0.9065755929e2, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var INa: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var INab: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var INaCa: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var INaK: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var IKv14_Na: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var IKr: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var IKs: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0005242
    // isVersionOf: http://identifiers.org/go/GO:0005241
    var IK1: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var ICaK: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var ICa: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var Ito1: uA_per_uF {pub: in};
    var i_Stim: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var IKv43: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var IKv14_K: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005262
    var ICab: uA_per_uF {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var IpCa: uA_per_uF {pub: in};
    var Jxfer: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var Jup: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var Jtrpn: mM_per_ms {pub: in};
    var Jrel: mM_per_ms {pub: in};
    var Jtr: mM_per_ms {pub: in};
    var time: ms {pub: in};
    var beta_SS: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var beta_JSR: dimensionless {pub: in};
    var beta_i: dimensionless {pub: in};
    var i_tot: uA_per_uF;
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ko: mM {init: 4, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: mM {init: 138, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cao: mM {init: 2, pub: out};
    RT_over_F = Rgas*Temp/Faraday;
    C = Acap*1.0e-3{mF_per_cm2};
    a1 = C/(Vmyo*Faraday);
    a2 = C/(2{dimensionless}*VSS*Faraday);
    ode(Nai, time) = -(INa+INab+3{dimensionless}*(INaCa+INaK)+IKv14_Na)*a1;
    ode(Ki, time) = -(IKr+IKs+IK1+ICaK+i_Stim-2{dimensionless}*INaK+IKv43+IKv14_K)*a1;
    ode(Cai, time) = beta_i*(Jxfer-Jup-Jtrpn-(ICab-2{dimensionless}*INaCa+IpCa)*0.5{dimensionless}*a1);
    ode(CaSS, time) = beta_SS*(Jrel*VJSR/VSS-Jxfer*Vmyo/VSS-ICa*a2);
    ode(CaJSR, time) = beta_JSR*(Jtr-Jrel);
    ode(CaNSR, time) = Jup*Vmyo/VNSR-Jtr*VJSR/VNSR;
    i_tot = INa+ICa+ICaK+IKr+IKs+IK1+INaCa+INaK+Ito1+IpCa+ICab+INab+i_Stim;
    ode(V, time) = -i_tot;
  enddef;

  def comp I_stimulus as
    var i_Stim: uA_per_uF {pub: out};
    var time: ms {pub: in};
    var stim_period: ms {init: 1e3};
    var stim_duration: ms {init: 3};
    var stim_amplitude: uA_per_uF {init: -15};
    var stim_offset: ms {init: 0};
    var past: ms;
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{uA_per_uF};
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62390
  // isVersionOf: http://identifiers.org/go/GO:0070296
  // isVersionOf: http://identifiers.org/go/GO:0051208
  // isVersionOf: http://identifiers.org/go/GO:0060402
  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  def comp COMPUTE_INTRACELLULAR_CALCIUM_FLUXES as
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var fb: dimensionless;
    var Cai: mM {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    var Kfb: mM {init: 0.000168};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    var Nfb: dimensionless {init: 1.2};
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var rb: dimensionless;
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    var CaNSR: mM {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var Krb: mM {init: 3.29};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var Nrb: dimensionless {init: 1};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var Jup: mM_per_ms {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0070296
    // isVersionOf: http://identifiers.org/go/GO:0051208
    var KSR: mM {init: 1.2};
    var vmaxf: per_ms {init: 0.0748e-3};
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var vmaxr: per_ms {init: 0.318e-3};
    // isVersionOf: http://identifiers.org/go/GO:0070296
    var Jrel: mM_per_ms {pub: out};
    var v1: per_ms {init: 1.8};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var O1_RyR: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var O2_RyR: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var CaJSR: mM {pub: in};
    var CaSS: mM {pub: in};
    var Jtr: mM_per_ms {pub: out};
    var tautr: ms {init: 0.5747};
    var Jxfer: mM_per_ms {pub: out};
    var tauxfer: ms {init: 26.7};
    fb = pow(Cai/Kfb, Nfb);
    rb = pow(CaNSR/Krb, Nrb);
    Jup = KSR*(vmaxf*fb-vmaxr*rb)/(1{dimensionless}+fb+rb);
    Jrel = v1*(O1_RyR+O2_RyR)*(CaJSR-CaSS);
    Jtr = (CaNSR-CaJSR)/tautr;
    Jxfer = (CaSS-Cai)/tauxfer;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62387
  // isVersionOf: http://identifiers.org/fma/FMA:62338
  // isVersionOf: http://identifiers.org/fma/FMA:62343
  // isVersionOf: http://identifiers.org/fma/FMA:62353
  // isVersionOf: http://identifiers.org/chebi/CHEBI:30742
  def comp COMPUTE_Jtrpn_and_BUFFER_SCALE_FACTORS as
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var LTRPNtot: mM {init: 70e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var HTRPNtot: mM {init: 140e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var khtrpn_plus: per_mM_per_ms {init: 20e0};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var khtrpn_minus: per_ms {init: 0.066e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var kltrpn_plus: per_mM_per_ms {init: 40e0};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var kltrpn_minus: per_ms {init: 40e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var CMDNtot: mM {init: 50e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var CSQNtot: mM {init: 15e0};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30742
    var EGTAtot: mM {init: 0e0};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var KmCMDN: mM {init: 2.38e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62353
    var KmCSQN: mM {init: 0.8e0};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30742
    var KmEGTA: mM {init: 1.5e-4};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cai: mM {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var dLTRPNCa: per_ms;
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var dHTRPNCa: per_ms;
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var Jtrpn: mM_per_ms {pub: out};
    var CaSS: mM {pub: in};
    var beta_SS: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var beta_JSR: dimensionless {pub: out};
    var beta_i: dimensionless {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62387
    var CaJSR: mM {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var LTRPNCa: dimensionless {init: 0.8046584973e-1, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var HTRPNCa: dimensionless {init: 0.9772152481, pub: out};
    var time: ms {pub: in};
    dLTRPNCa = kltrpn_plus*Cai*(1{dimensionless}-LTRPNCa)-kltrpn_minus*LTRPNCa;
    dHTRPNCa = khtrpn_plus*Cai*(1{dimensionless}-HTRPNCa)-khtrpn_minus*HTRPNCa;
    ode(LTRPNCa, time) = dLTRPNCa;
    ode(HTRPNCa, time) = dHTRPNCa;
    Jtrpn = LTRPNtot*dLTRPNCa+HTRPNtot*dHTRPNCa;
    beta_SS = 1{dimensionless}/(1{dimensionless}+CMDNtot*KmCMDN/sqr(CaSS+KmCMDN)+EGTAtot*KmEGTA/sqr(CaSS+KmEGTA));
    beta_JSR = 1{dimensionless}/(1{dimensionless}+CSQNtot*KmCSQN/sqr(CaJSR+KmCSQN));
    beta_i = 1{dimensionless}/(1{dimensionless}+CMDNtot*KmCMDN/sqr(Cai+KmCMDN)+EGTAtot*KmEGTA/sqr(Cai+KmEGTA));
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  def comp COMPUTE_DERIVATIVES_OF_RyR_RECEPTOR_STATES as
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var kaplus: per_uM4_per_ms {init: 0.01215};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var kaminus: per_ms {init: 0.576};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var kbplus: per_uM3_per_ms {init: 0.00405};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var kbminus: per_ms {init: 1.93};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var kcplus: per_ms {init: 0.1};
    // isVersionOf: http://identifiers.org/fma/FMA:62390
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var kcminus: per_ms {init: 0.0008};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var ncoop: dimensionless {init: 4};
    var mcoop: dimensionless {init: 3};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var CaSS: mM {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var dC1_RyR: per_ms;
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var dO2_RyR: per_ms;
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var dC2_RyR: per_ms;
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var dO1_RyR: per_ms;
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var time: ms {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var C1_RyR: dimensionless {init: 0.4448038946, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var O2_RyR: dimensionless {init: 0.397392006e-8, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var C2_RyR: dimensionless {init: 0.554535924, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    var O1_RyR: dimensionless {init: 0.6601783287e-3, pub: out};
    dC1_RyR = -kaplus*pow(CaSS*1000{m2u}, ncoop)*C1_RyR+kaminus*O1_RyR;
    dO2_RyR = kbplus*pow(CaSS*1000{m2u}, mcoop)*O1_RyR-kbminus*O2_RyR;
    dC2_RyR = kcplus*O1_RyR-kcminus*C2_RyR;
    dO1_RyR = -(dC1_RyR+dO2_RyR+dC2_RyR);
    ode(C1_RyR, time) = dC1_RyR;
    ode(O2_RyR, time) = dO2_RyR;
    ode(C2_RyR, time) = dC2_RyR;
    ode(O1_RyR, time) = dO1_RyR;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp COMPUTE_DERIVATIVES_OF_LTYPE_CHANNEL_STATES as
    var fL: per_ms {init: 0.3};
    var gL: per_ms {init: 4};
    var bL: dimensionless {init: 2};
    var aL: dimensionless {init: 2};
    var C0_to_C1: per_ms;
    var C1_to_C2: per_ms;
    var C2_to_C3: per_ms;
    var C3_to_C4: per_ms;
    var C1_to_C0: per_ms;
    var C2_to_C1: per_ms;
    var C3_to_C2: per_ms;
    var C4_to_C3: per_ms;
    var CCa0_to_CCa1: per_ms;
    var CCa1_to_CCa2: per_ms;
    var CCa2_to_CCa3: per_ms;
    var CCa3_to_CCa4: per_ms;
    var CCa1_to_CCa0: per_ms;
    var CCa2_to_CCa1: per_ms;
    var CCa3_to_CCa2: per_ms;
    var CCa4_to_CCa3: per_ms;
    var C0_to_CCa0: per_ms;
    var C1_to_CCa1: per_ms;
    var C2_to_CCa2: per_ms;
    var C3_to_CCa3: per_ms;
    var C4_to_CCa4: per_ms;
    var CCa0_to_C0: per_ms;
    var CCa1_to_C1: per_ms;
    var CCa2_to_C2: per_ms;
    var CCa3_to_C3: per_ms;
    var CCa4_to_C4: per_ms;
    var V: mV {pub: in};
    var alpha: per_ms;
    var beta: per_ms;
    var alpha_prime: per_ms;
    var beta_prime: per_ms;
    var gamma: per_ms;
    var omega: per_ms;
    var a1_Ca0: per_ms;
    var a2_Ca0: per_ms;
    var a1_Ca1: per_ms;
    var a2_Ca1: per_ms;
    var a1_Ca2: per_ms;
    var a2_Ca2: per_ms;
    var a1_Ca3: per_ms;
    var a2_Ca3: per_ms;
    var a1_Ca4: per_ms;
    var a2_Ca4: per_ms;
    var a1_C0: per_ms;
    var a2_C0: per_ms;
    var a1_C1: per_ms;
    var a2_C1: per_ms;
    var a1_C2: per_ms;
    var a2_C2: per_ms;
    var a1_C3: per_ms;
    var a2_C3: per_ms;
    var a1_C4: per_ms;
    var a2_C4: per_ms;
    var CaSS: mM {pub: in};
    var C0: dimensionless {init: 0.8621934054};
    var C1: dimensionless {init: 0.01141398211};
    var C2: dimensionless {init: 5.666325225e-5};
    var C3: dimensionless {init: 1.25021357e-7};
    var C4: dimensionless {init: 1.034426748e-10};
    var CCa0: dimensionless {init: 0.1198547081};
    var CCa1: dimensionless {init: 0.006346794302};
    var CCa2: dimensionless {init: 1.260326488e-4};
    var CCa3: dimensionless {init: 1.112315238e-6};
    var CCa4: dimensionless {init: 3.681315892e-9};
    var time: ms {pub: in};
    var Open: dimensionless {init: 7.757981563e-12, pub: out};
    var yCa: dimensionless {init: 0.9997157074, pub: out};
    var a1_Cainf: dimensionless;
    var yCa_inf: dimensionless;
    var tau_yCa: ms;
    alpha = 4{per_ms}*1.2{dimensionless}*0.416{dimensionless}*exp(0.012{per_mV}*(V-35{mV}));
    beta = 4{per_ms}*0.45{dimensionless}*0.049{dimensionless}*exp(-0.065{per_mV}*(V-22{mV}));
    alpha_prime = aL*alpha;
    beta_prime = beta/bL;
    gamma = 0.6{per_ms}*0.09233{per_mM}*CaSS;
    omega = 0.25{per_ms}*0.01{dimensionless};
    C0_to_C1 = 4{dimensionless}*alpha;
    C1_to_C2 = 3{dimensionless}*alpha;
    C2_to_C3 = 2{dimensionless}*alpha;
    C3_to_C4 = alpha;
    CCa0_to_CCa1 = 4{dimensionless}*alpha_prime;
    CCa1_to_CCa2 = 3{dimensionless}*alpha_prime;
    CCa2_to_CCa3 = 2{dimensionless}*alpha_prime;
    CCa3_to_CCa4 = alpha_prime;
    C1_to_C0 = beta;
    C2_to_C1 = 2{dimensionless}*beta;
    C3_to_C2 = 3{dimensionless}*beta;
    C4_to_C3 = 4{dimensionless}*beta;
    CCa1_to_CCa0 = beta_prime;
    CCa2_to_CCa1 = 2{dimensionless}*beta_prime;
    CCa3_to_CCa2 = 3{dimensionless}*beta_prime;
    CCa4_to_CCa3 = 4{dimensionless}*beta_prime;
    C0_to_CCa0 = gamma;
    C1_to_CCa1 = aL*C0_to_CCa0;
    C2_to_CCa2 = aL*C1_to_CCa1;
    C3_to_CCa3 = aL*C2_to_CCa2;
    C4_to_CCa4 = aL*C3_to_CCa3;
    CCa0_to_C0 = omega;
    CCa1_to_C1 = CCa0_to_C0/bL;
    CCa2_to_C2 = CCa1_to_C1/bL;
    CCa3_to_C3 = CCa2_to_C2/bL;
    CCa4_to_C4 = CCa3_to_C3/bL;
    a1_C0 = (C0_to_C1+C0_to_CCa0)*C0;
    a2_C0 = C1_to_C0*C1+CCa0_to_C0*CCa0;
    ode(C0, time) = a2_C0-a1_C0;
    a1_C1 = (C1_to_C0+C1_to_C2+C1_to_CCa1)*C1;
    a2_C1 = C0_to_C1*C0+C2_to_C1*C2+CCa1_to_C1*CCa1;
    ode(C1, time) = a2_C1-a1_C1;
    a1_C2 = (C2_to_C1+C2_to_C3+C2_to_CCa2)*C2;
    a2_C2 = C1_to_C2*C1+C3_to_C2*C3+CCa2_to_C2*CCa2;
    ode(C2, time) = a2_C2-a1_C2;
    a1_C3 = (C3_to_C2+C3_to_C4+C3_to_CCa3)*C3;
    a2_C3 = C2_to_C3*C2+C4_to_C3*C4+CCa3_to_C3*CCa3;
    ode(C3, time) = a2_C3-a1_C3;
    a1_C4 = (C4_to_C3+fL+C4_to_CCa4)*C4;
    a2_C4 = C3_to_C4*C3+gL*Open+CCa4_to_C4*CCa4;
    ode(C4, time) = a2_C4-a1_C4;
    ode(Open, time) = fL*C4-gL*Open;
    a1_Ca0 = (CCa0_to_CCa1+CCa0_to_C0)*CCa0;
    a2_Ca0 = CCa1_to_CCa0*CCa1+C0_to_CCa0*C0;
    ode(CCa0, time) = a2_Ca0-a1_Ca0;
    a1_Ca1 = (CCa1_to_CCa0+CCa1_to_CCa2+CCa1_to_C1)*CCa1;
    a2_Ca1 = CCa0_to_CCa1*CCa0+CCa2_to_CCa1*CCa2+C1_to_CCa1*C1;
    ode(CCa1, time) = a2_Ca1-a1_Ca1;
    a1_Ca2 = (CCa2_to_CCa1+CCa2_to_CCa3+CCa2_to_C2)*CCa2;
    a2_Ca2 = CCa1_to_CCa2*CCa1+CCa3_to_CCa2*CCa3+C2_to_CCa2*C2;
    ode(CCa2, time) = a2_Ca2-a1_Ca2;
    a1_Ca3 = (CCa3_to_CCa2+CCa3_to_CCa4+CCa3_to_C3)*CCa3;
    a2_Ca3 = CCa2_to_CCa3*CCa2+CCa4_to_CCa3*CCa4+C3_to_CCa3*C3;
    ode(CCa3, time) = a2_Ca3-a1_Ca3;
    a1_Ca4 = (CCa4_to_CCa3+CCa4_to_C4)*CCa4;
    a2_Ca4 = CCa3_to_CCa4*CCa3+C4_to_CCa4*C4;
    ode(CCa4, time) = a2_Ca4-a1_Ca4;
    a1_Cainf = 0.82{dimensionless};
    yCa_inf = a1_Cainf/(1{dimensionless}+exp((V+28.5{mV})/7.8{mV}))+1{dimensionless}-a1_Cainf;
    tau_yCa = 1{ms}/(0.00336336209452{dimensionless}/(0.5{dimensionless}+exp(V/(-5.53899874036055{mV})))+0.00779046570737{dimensionless}*exp(V/(-49.51039631160386{mV})));
    ode(yCa, time) = (yCa_inf-yCa)/tau_yCa;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp COMPUTE_DERIVATIVES_OF_Kv4_3_CHANNEL_STATES as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var V: mV {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alpha_act43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var beta_act43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alpha_inact43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var beta_inact43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C0Kv43_to_C1Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C1Kv43_to_C2Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C2Kv43_to_C3Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C3Kv43_to_OKv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI0Kv43_to_CI1Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI1Kv43_to_CI2Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI2Kv43_to_CI3Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI3Kv43_to_OIKv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C1Kv43_to_C0Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C2Kv43_to_C1Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C3Kv43_to_C2Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OKv43_to_C3Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI1Kv43_to_CI0Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI2Kv43_to_CI1Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI3Kv43_to_CI2Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OIKv43_to_CI3Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C0Kv43_to_CI0Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C1Kv43_to_CI1Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C2Kv43_to_CI2Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C3Kv43_to_CI3Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OKv43_to_OIKv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI0Kv43_to_C0Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI1Kv43_to_C1Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI2Kv43_to_C2Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI3Kv43_to_C3Kv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OIKv43_to_OKv43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C0Kv43: dimensionless {init: 0.9513721351, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C1Kv43: dimensionless {init: 0.02668288089, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C2Kv43: dimensionless {init: 2.806380358e-4, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C3Kv43: dimensionless {init: 1.311837579e-6, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OKv43: dimensionless {init: 2.29955624e-9, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI0Kv43: dimensionless {init: 0.01513025204, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI1Kv43: dimensionless {init: 0.005442964601, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI2Kv43: dimensionless {init: 9.918373359000001e-4, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI3Kv43: dimensionless {init: 9.514386057000001e-5, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OIKv43: dimensionless {init: 2.742677382e-6, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_C043: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_C043: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_C143: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_C143: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_C243: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_C243: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_C343: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_C343: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_O43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_O43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_I043: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_I043: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_I143: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_I143: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_I243: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_I243: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_I343: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_I343: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_OI43: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_OI43: per_ms;
    var time: ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alphaa0Kv43: per_ms {init: 0.543708};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var aaKv43: per_mV {init: 0.028983};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var betaa0Kv43: per_ms {init: 0.080185};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var baKv43: per_mV {init: 0.0468437};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alphai0Kv43: per_ms {init: 0.0498424};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var aiKv43: per_mV {init: 0.000373016};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var betai0Kv43: per_ms {init: 0.000819482};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var biKv43: per_mV {init: 0.00000005374};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var f1Kv43: dimensionless {init: 1.8936};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var f2Kv43: dimensionless {init: 14.224647456};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var f3Kv43: dimensionless {init: 158.574378389};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var f4Kv43: dimensionless {init: 142.936645351};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var b1Kv43: dimensionless {init: 6.77348};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var b2Kv43: dimensionless {init: 15.6212705152};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var b3Kv43: dimensionless {init: 28.7532603313};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var b4Kv43: dimensionless {init: 524.576206679};
    alpha_act43 = alphaa0Kv43*exp(aaKv43*V);
    beta_act43 = betaa0Kv43*exp(-baKv43*V);
    alpha_inact43 = alphai0Kv43*exp(-aiKv43*V);
    beta_inact43 = betai0Kv43*exp(biKv43*V);
    C0Kv43_to_C1Kv43 = 4{dimensionless}*alpha_act43;
    C1Kv43_to_C2Kv43 = 3{dimensionless}*alpha_act43;
    C2Kv43_to_C3Kv43 = 2{dimensionless}*alpha_act43;
    C3Kv43_to_OKv43 = alpha_act43;
    CI0Kv43_to_CI1Kv43 = 4{dimensionless}*b1Kv43*alpha_act43;
    CI1Kv43_to_CI2Kv43 = 3{dimensionless}*b2Kv43*alpha_act43/b1Kv43;
    CI2Kv43_to_CI3Kv43 = 2{dimensionless}*b3Kv43*alpha_act43/b2Kv43;
    CI3Kv43_to_OIKv43 = b4Kv43*alpha_act43/b3Kv43;
    C1Kv43_to_C0Kv43 = beta_act43;
    C2Kv43_to_C1Kv43 = 2{dimensionless}*beta_act43;
    C3Kv43_to_C2Kv43 = 3{dimensionless}*beta_act43;
    OKv43_to_C3Kv43 = 4{dimensionless}*beta_act43;
    CI1Kv43_to_CI0Kv43 = beta_act43/f1Kv43;
    CI2Kv43_to_CI1Kv43 = 2{dimensionless}*f1Kv43*beta_act43/f2Kv43;
    CI3Kv43_to_CI2Kv43 = 3{dimensionless}*f2Kv43*beta_act43/f3Kv43;
    OIKv43_to_CI3Kv43 = 4{dimensionless}*f3Kv43*beta_act43/f4Kv43;
    C0Kv43_to_CI0Kv43 = beta_inact43;
    C1Kv43_to_CI1Kv43 = f1Kv43*beta_inact43;
    C2Kv43_to_CI2Kv43 = f2Kv43*beta_inact43;
    C3Kv43_to_CI3Kv43 = f3Kv43*beta_inact43;
    OKv43_to_OIKv43 = f4Kv43*beta_inact43;
    CI0Kv43_to_C0Kv43 = alpha_inact43;
    CI1Kv43_to_C1Kv43 = alpha_inact43/b1Kv43;
    CI2Kv43_to_C2Kv43 = alpha_inact43/b2Kv43;
    CI3Kv43_to_C3Kv43 = alpha_inact43/b3Kv43;
    OIKv43_to_OKv43 = alpha_inact43/b4Kv43;
    a1_C043 = (C0Kv43_to_C1Kv43+C0Kv43_to_CI0Kv43)*C0Kv43;
    a2_C043 = C1Kv43_to_C0Kv43*C1Kv43+CI0Kv43_to_C0Kv43*CI0Kv43;
    ode(C0Kv43, time) = a2_C043-a1_C043;
    a1_C143 = (C1Kv43_to_C2Kv43+C1Kv43_to_C0Kv43+C1Kv43_to_CI1Kv43)*C1Kv43;
    a2_C143 = C2Kv43_to_C1Kv43*C2Kv43+CI1Kv43_to_C1Kv43*CI1Kv43+C0Kv43_to_C1Kv43*C0Kv43;
    ode(C1Kv43, time) = a2_C143-a1_C143;
    a1_C243 = (C2Kv43_to_C3Kv43+C2Kv43_to_C1Kv43+C2Kv43_to_CI2Kv43)*C2Kv43;
    a2_C243 = C3Kv43_to_C2Kv43*C3Kv43+CI2Kv43_to_C2Kv43*CI2Kv43+C1Kv43_to_C2Kv43*C1Kv43;
    ode(C2Kv43, time) = a2_C243-a1_C243;
    a1_C343 = (C3Kv43_to_OKv43+C3Kv43_to_C2Kv43+C3Kv43_to_CI3Kv43)*C3Kv43;
    a2_C343 = OKv43_to_C3Kv43*OKv43+CI3Kv43_to_C3Kv43*CI3Kv43+C2Kv43_to_C3Kv43*C2Kv43;
    ode(C3Kv43, time) = a2_C343-a1_C343;
    a1_O43 = (OKv43_to_C3Kv43+OKv43_to_OIKv43)*OKv43;
    a2_O43 = C3Kv43_to_OKv43*C3Kv43+OIKv43_to_OKv43*OIKv43;
    ode(OKv43, time) = a2_O43-a1_O43;
    a1_I043 = (CI0Kv43_to_C0Kv43+CI0Kv43_to_CI1Kv43)*CI0Kv43;
    a2_I043 = C0Kv43_to_CI0Kv43*C0Kv43+CI1Kv43_to_CI0Kv43*CI1Kv43;
    ode(CI0Kv43, time) = a2_I043-a1_I043;
    a1_I143 = (CI1Kv43_to_CI2Kv43+CI1Kv43_to_C1Kv43+CI1Kv43_to_CI0Kv43)*CI1Kv43;
    a2_I143 = CI2Kv43_to_CI1Kv43*CI2Kv43+C1Kv43_to_CI1Kv43*C1Kv43+CI0Kv43_to_CI1Kv43*CI0Kv43;
    ode(CI1Kv43, time) = a2_I143-a1_I143;
    a1_I243 = (CI2Kv43_to_CI3Kv43+CI2Kv43_to_C2Kv43+CI2Kv43_to_CI1Kv43)*CI2Kv43;
    a2_I243 = CI3Kv43_to_CI2Kv43*CI3Kv43+C2Kv43_to_CI2Kv43*C2Kv43+CI1Kv43_to_CI2Kv43*CI1Kv43;
    ode(CI2Kv43, time) = a2_I243-a1_I243;
    a1_I343 = (CI3Kv43_to_OIKv43+CI3Kv43_to_C3Kv43+CI3Kv43_to_CI2Kv43)*CI3Kv43;
    a2_I343 = OIKv43_to_CI3Kv43*OIKv43+C3Kv43_to_CI3Kv43*C3Kv43+CI2Kv43_to_CI3Kv43*CI2Kv43;
    ode(CI3Kv43, time) = a2_I343-a1_I343;
    a1_OI43 = (OIKv43_to_OKv43+OIKv43_to_CI3Kv43)*OIKv43;
    a2_OI43 = OKv43_to_OIKv43*OKv43+CI3Kv43_to_OIKv43*CI3Kv43;
    ode(OIKv43, time) = a2_OI43-a1_OI43;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp COMPUTE_DERIVATIVES_OF_Kv1_4_CHANNEL_STATES as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var f1Kv14: dimensionless {init: 0.52465073996};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var f2Kv14: dimensionless {init: 17.51885408639};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var f3Kv14: dimensionless {init: 938.58764534556};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var f4Kv14: dimensionless {init: 54749.19473332601};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var b1Kv14: dimensionless {init: 1.00947847105};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var b2Kv14: dimensionless {init: 1.17100540567};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var b3Kv14: dimensionless {init: 0.63902768758};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var b4Kv14: dimensionless {init: 2.12035379095};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alphaa0Kv14: per_ms {init: 1.84002414554};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var aaKv14: per_mV {init: 0.00768548031};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var betaa0Kv14: per_ms {init: 0.0108174834};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var baKv14: per_mV {init: 0.07793378174};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alphai0Kv14: per_ms {init: 0.00305767916};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var betai0Kv14: per_ms {init: 0.00000244936};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alpha_act14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var beta_act14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alpha_inact14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var beta_inact14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C0Kv14_to_C1Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C1Kv14_to_C2Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C2Kv14_to_C3Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C3Kv14_to_OKv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI0Kv14_to_CI1Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI1Kv14_to_CI2Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI2Kv14_to_CI3Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI3Kv14_to_OIKv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C1Kv14_to_C0Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C2Kv14_to_C1Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C3Kv14_to_C2Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OKv14_to_C3Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI1Kv14_to_CI0Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI2Kv14_to_CI1Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI3Kv14_to_CI2Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OIKv14_to_CI3Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C0Kv14_to_CI0Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C1Kv14_to_CI1Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C2Kv14_to_CI2Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C3Kv14_to_CI3Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OKv14_to_OIKv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI0Kv14_to_C0Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI1Kv14_to_C1Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI2Kv14_to_C2Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI3Kv14_to_C3Kv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OIKv14_to_OKv14: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_C0: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_C0: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C0Kv14: dimensionless {init: 0.5977099765, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_C1: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_C1: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C1Kv14: dimensionless {init: 0.1730990528, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_C2: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_C2: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C2Kv14: dimensionless {init: 0.01881072386, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_C3: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_C3: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var C3Kv14: dimensionless {init: 9.16070135e-4, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_O: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_O: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OKv14: dimensionless {init: 1.975541357e-5, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_CI0: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_CI0: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI0Kv14: dimensionless {init: 0.03539084346, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_CI1: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_CI1: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI1Kv14: dimensionless {init: 0.005428824353, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_CI2: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_CI2: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI2Kv14: dimensionless {init: 0.02287858869, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_CI3: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_CI3: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var CI3Kv14: dimensionless {init: 0.03233800003, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a1_OI: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var a2_OI: per_ms;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var OIKv14: dimensionless {init: 0.1134082058, pub: out};
    var time: ms {pub: in};
    var V: mV {pub: in};
    alpha_act14 = alphaa0Kv14*exp(aaKv14*V);
    beta_act14 = betaa0Kv14*exp(-baKv14*V);
    alpha_inact14 = alphai0Kv14;
    beta_inact14 = betai0Kv14;
    C0Kv14_to_C1Kv14 = 4{dimensionless}*alpha_act14;
    C1Kv14_to_C2Kv14 = 3{dimensionless}*alpha_act14;
    C2Kv14_to_C3Kv14 = 2{dimensionless}*alpha_act14;
    C3Kv14_to_OKv14 = alpha_act14;
    CI0Kv14_to_CI1Kv14 = 4{dimensionless}*b1Kv14*alpha_act14;
    CI1Kv14_to_CI2Kv14 = 3{dimensionless}*b2Kv14*alpha_act14/b1Kv14;
    CI2Kv14_to_CI3Kv14 = 2{dimensionless}*b3Kv14*alpha_act14/b2Kv14;
    CI3Kv14_to_OIKv14 = b4Kv14*alpha_act14/b3Kv14;
    C1Kv14_to_C0Kv14 = beta_act14;
    C2Kv14_to_C1Kv14 = 2{dimensionless}*beta_act14;
    C3Kv14_to_C2Kv14 = 3{dimensionless}*beta_act14;
    OKv14_to_C3Kv14 = 4{dimensionless}*beta_act14;
    CI1Kv14_to_CI0Kv14 = beta_act14/f1Kv14;
    CI2Kv14_to_CI1Kv14 = 2{dimensionless}*f1Kv14*beta_act14/f2Kv14;
    CI3Kv14_to_CI2Kv14 = 3{dimensionless}*f2Kv14*beta_act14/f3Kv14;
    OIKv14_to_CI3Kv14 = 4{dimensionless}*f3Kv14*beta_act14/f4Kv14;
    C0Kv14_to_CI0Kv14 = beta_inact14;
    C1Kv14_to_CI1Kv14 = f1Kv14*beta_inact14;
    C2Kv14_to_CI2Kv14 = f2Kv14*beta_inact14;
    C3Kv14_to_CI3Kv14 = f3Kv14*beta_inact14;
    OKv14_to_OIKv14 = f4Kv14*beta_inact14;
    CI0Kv14_to_C0Kv14 = alpha_inact14;
    CI1Kv14_to_C1Kv14 = alpha_inact14/b1Kv14;
    CI2Kv14_to_C2Kv14 = alpha_inact14/b2Kv14;
    CI3Kv14_to_C3Kv14 = alpha_inact14/b3Kv14;
    OIKv14_to_OKv14 = alpha_inact14/b4Kv14;
    a1_C0 = (C0Kv14_to_C1Kv14+C0Kv14_to_CI0Kv14)*C0Kv14;
    a2_C0 = C1Kv14_to_C0Kv14*C1Kv14+CI0Kv14_to_C0Kv14*CI0Kv14;
    ode(C0Kv14, time) = a2_C0-a1_C0;
    a1_C1 = (C1Kv14_to_C2Kv14+C1Kv14_to_C0Kv14+C1Kv14_to_CI1Kv14)*C1Kv14;
    a2_C1 = C2Kv14_to_C1Kv14*C2Kv14+CI1Kv14_to_C1Kv14*CI1Kv14+C0Kv14_to_C1Kv14*C0Kv14;
    ode(C1Kv14, time) = a2_C1-a1_C1;
    a1_C2 = (C2Kv14_to_C3Kv14+C2Kv14_to_C1Kv14+C2Kv14_to_CI2Kv14)*C2Kv14;
    a2_C2 = C3Kv14_to_C2Kv14*C3Kv14+CI2Kv14_to_C2Kv14*CI2Kv14+C1Kv14_to_C2Kv14*C1Kv14;
    ode(C2Kv14, time) = a2_C2-a1_C2;
    a1_C3 = (C3Kv14_to_OKv14+C3Kv14_to_C2Kv14+C3Kv14_to_CI3Kv14)*C3Kv14;
    a2_C3 = OKv14_to_C3Kv14*OKv14+CI3Kv14_to_C3Kv14*CI3Kv14+C2Kv14_to_C3Kv14*C2Kv14;
    ode(C3Kv14, time) = a2_C3-a1_C3;
    a1_O = (OKv14_to_C3Kv14+OKv14_to_OIKv14)*OKv14;
    a2_O = C3Kv14_to_OKv14*C3Kv14+OIKv14_to_OKv14*OIKv14;
    ode(OKv14, time) = a2_O-a1_O;
    a1_CI0 = (CI0Kv14_to_C0Kv14+CI0Kv14_to_CI1Kv14)*CI0Kv14;
    a2_CI0 = C0Kv14_to_CI0Kv14*C0Kv14+CI1Kv14_to_CI0Kv14*CI1Kv14;
    ode(CI0Kv14, time) = a2_CI0-a1_CI0;
    a1_CI1 = (CI1Kv14_to_CI2Kv14+CI1Kv14_to_C1Kv14+CI1Kv14_to_CI0Kv14)*CI1Kv14;
    a2_CI1 = CI2Kv14_to_CI1Kv14*CI2Kv14+C1Kv14_to_CI1Kv14*C1Kv14+CI0Kv14_to_CI1Kv14*CI0Kv14;
    ode(CI1Kv14, time) = a2_CI1-a1_CI1;
    a1_CI2 = (CI2Kv14_to_CI3Kv14+CI2Kv14_to_C2Kv14+CI2Kv14_to_CI1Kv14)*CI2Kv14;
    a2_CI2 = CI3Kv14_to_CI2Kv14*CI3Kv14+C2Kv14_to_CI2Kv14*C2Kv14+CI1Kv14_to_CI2Kv14*CI1Kv14;
    ode(CI2Kv14, time) = a2_CI2-a1_CI2;
    a1_CI3 = (CI3Kv14_to_OIKv14+CI3Kv14_to_C3Kv14+CI3Kv14_to_CI2Kv14)*CI3Kv14;
    a2_CI3 = OIKv14_to_CI3Kv14*OIKv14+C3Kv14_to_CI3Kv14*C3Kv14+CI2Kv14_to_CI3Kv14*CI2Kv14;
    ode(CI3Kv14, time) = a2_CI3-a1_CI3;
    a1_OI = (OIKv14_to_OKv14+OIKv14_to_CI3Kv14)*OIKv14;
    a2_OI = OKv14_to_OIKv14*OKv14+CI3Kv14_to_OIKv14*CI3Kv14;
    ode(OIKv14, time) = a2_OI-a1_OI;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp COMPUTE_REVERSAL_POTENTIALS as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var ENa: mV {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    var EK: mV {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org//
    var EKs: mV {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var ECa: mV {pub: out};
    var RT_over_F: mV {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nao: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Nai: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ko: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var Ki: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cao: mM {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Cai: mM {pub: in};
    var a1: mM;
    var a2: mM;
    ENa = RT_over_F*ln(Nao/Nai);
    EK = RT_over_F*ln(Ko/Ki);
    a1 = Ko+0.01833{dimensionless}*Nao;
    a2 = Ki+0.01833{dimensionless}*Nai;
    EKs = RT_over_F*ln(a1/a2);
    ECa = 0.5{dimensionless}*RT_over_F*ln(Cao/Cai);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005250
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp COMPUTE_INa_IKr_IKs_Ito1_IK1_INab_IKp as
    var GKr: mS_per_uF {init: 0.0186e0};
    var GKs: mS_per_uF {init: 0.0035e0};
    var GK1: mS_per_uF {init: 0.1253051261188079722568586886469e0};
    var GNa: mS_per_uF {init: 56.32e0};
    var GNab: mS_per_uF {init: 0.001e0};
    var KvScale: dimensionless {init: 0.872};
    var Kv43Frac: dimensionless {init: 0.889};
    var GKv43: mS_per_uF;
    var PKv14: litre_per_farad_second;
    var OKv14: dimensionless {pub: in};
    var na6: dimensionless {pub: in};
    var na7: dimensionless {pub: in};
    var V: mV {pub: in};
    var ENa: mV {pub: in};
    var Ko: mM {pub: in};
    var OHerg: dimensionless {pub: in};
    var O1ks: dimensionless {pub: in};
    var O2ks: dimensionless {pub: in};
    var OKv43: dimensionless {pub: in};
    var RT_over_F: mV {pub: in};
    var Faraday: coulomb_per_millimole {pub: in};
    var Ki: mM {pub: in};
    var EK: mV {pub: in};
    var fKo: dimensionless;
    var VF_over_RT: dimensionless;
    var VFsq_over_RT: coulomb_per_millimole;
    var a1_K: mM;
    var a2: dimensionless;
    var a1_Na: mM;
    var K1_inf: dimensionless;
    var IKr: uA_per_uF {pub: out};
    var IKs: uA_per_uF {pub: out};
    var IKv43: uA_per_uF {pub: out};
    var IKv14_K: uA_per_uF {pub: out};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var IKv14_Na: uA_per_uF {pub: out};
    var IKv14: uA_per_uF {pub: out};
    var Ito1: uA_per_uF {pub: out};
    var IK1: uA_per_uF {pub: out};
    var INab: uA_per_uF {pub: out};
    var INa: uA_per_uF {pub: out};
    PKv14 = (1{dimensionless}-Kv43Frac)*KvScale*4.2986e-7{litre_per_farad_second};
    GKv43 = Kv43Frac*KvScale*0.1{mS_per_uF};
    INa = GNa*(na6+na7)*(V-ENa);
    fKo = sqrt(Ko/4{mM});
    IKr = GKr*fKo*OHerg*(V-EK);
    IKs = GKs*(O1ks+O2ks)*(V-EK);
    IKv43 = GKv43*OKv43*(V-EK);
    VF_over_RT = V/RT_over_F;
    VFsq_over_RT = 1000{dimensionless}*Faraday*VF_over_RT;
    a1_K = Ki*exp(VF_over_RT)-Ko;
    a2 = exp(VF_over_RT)-1{dimensionless};
    IKv14_K = PKv14*OKv14*VFsq_over_RT*a1_K/a2;
    a1_Na = Nai*exp(VF_over_RT)-Nao;
    IKv14_Na = 0.02{dimensionless}*PKv14*OKv14*VFsq_over_RT*a1_Na/a2;
    IKv14 = IKv14_K+IKv14_Na;
    Ito1 = IKv43+IKv14;
    K1_inf = 1{dimensionless}/(0.94{dimensionless}+exp(1.26{dimensionless}/RT_over_F*(V-EK)));
    IK1 = GK1*sqrt(Ko/1{mM})*K1_inf*(V-EK);
    INab = GNab*(V-ENa);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0030181
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp COMPUTE_INaK_INaCa_ICab_IpCa as
    var V: mV {pub: in};
    var ECa: mV {pub: in};
    var RT_over_F: mV {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var kNaCa: uA_per_uF {init: 0.44};
    var KmNa: mM {init: 87.5};
    var KmCa: mM {init: 1.38};
    var ksat: dimensionless {init: 0.2};
    var eta: dimensionless {init: 0.35};
    var INaKmax: uA_per_uF {init: 2.387};
    var KmNai: mM {init: 20};
    var KmKo: mM {init: 1.5};
    var IpCamax: uA_per_uF {init: 0.05};
    var KmpCa: mM {init: 0.0005};
    var GCab: mS_per_uF {init: 7.684e-5};
    var VF_over_RT: dimensionless;
    var sigma: dimensionless;
    var a1_Na: dimensionless;
    var a2_Na: dimensionless;
    var fNaK: dimensionless;
    var a1_K: dimensionless;
    var a2_K: dimensionless;
    var INaK: uA_per_uF {pub: out};
    var a1_ncx: mM4;
    var a2_ncx: mM4;
    var a3_ncx: dimensionless;
    var a4_ncx: mM;
    var a5_ncx: mM3;
    var INaCa: uA_per_uF {pub: out};
    var ICab: uA_per_uF {pub: out};
    var IpCa: uA_per_uF {pub: out};
    ICab = GCab*(V-ECa);
    IpCa = IpCamax*Cai/(KmpCa+Cai);
    VF_over_RT = V/RT_over_F;
    sigma = (exp(Nao/67.3{mM})-1{dimensionless})/7{dimensionless};
    a1_Na = 1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*VF_over_RT);
    a2_Na = 0.0365{dimensionless}*sigma*exp(-1.33{dimensionless}*VF_over_RT);
    fNaK = 1{dimensionless}/(a1_Na+a2_Na);
    a1_K = Ko/(Ko+KmKo);
    a2_K = 1{dimensionless}+pow(KmNai/Nai, 1.5{dimensionless});
    INaK = INaKmax*fNaK*a1_K/a2_K;
    a1_ncx = exp(eta*VF_over_RT)*pow(Nai, 3{dimensionless})*Cao;
    a2_ncx = exp((eta-1{dimensionless})*VF_over_RT)*pow(Nao, 3{dimensionless})*Cai;
    a3_ncx = 1{dimensionless}+ksat*exp((eta-1{dimensionless})*VF_over_RT);
    a4_ncx = KmCa+Cao;
    a5_ncx = (pow(KmNa, 3{dimensionless})+pow(Nao, 3{dimensionless}))/5000{dimensionless};
    INaCa = kNaCa*(a1_ncx-a2_ncx)/(a4_ncx*a3_ncx*a5_ncx);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp COMPUTE_ICa_ICaK as
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var RT_over_F: mV {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var V: mV {pub: in};
    var yCa: dimensionless {pub: in};
    var Open: dimensionless {pub: in};
    var Faraday: coulomb_per_millimole {pub: in};
    var PKprime: litre_per_farad_second;
    var VF_over_RT: dimensionless;
    var VFsq_over_RT: coulomb_per_millimole;
    var a1_Ca: mM;
    var a2_Ca: dimensionless;
    var a1_K: mM;
    var a2_K: dimensionless;
    var ICa: uA_per_uF {pub: out};
    var ICaK: uA_per_uF {pub: out};
    var ICamax: uA_per_uF;
    var Icabar: uA_per_uF;
    var PCa: litre_per_farad_second;
    var PK: litre_per_farad_second;
    var ICahalf: uA_per_uF {init: -0.265};
    var Pscale: dimensionless {init: 7};
    PK = Pscale*4.574e-7{litre_per_farad_second};
    PCa = Pscale*2.469e-4{litre_per_farad_second};
    VF_over_RT = V/RT_over_F;
    VFsq_over_RT = 1000{dimensionless}*Faraday*VF_over_RT;
    a1_Ca = 1.0e-3{mM}*exp(2{dimensionless}*VF_over_RT)-Cao*0.341{dimensionless};
    a2_Ca = exp(2{dimensionless}*VF_over_RT)-1{dimensionless};
    ICamax = PCa*4{dimensionless}*VFsq_over_RT*a1_Ca/a2_Ca;
    ICa = ICamax*yCa*Open;
    Icabar = sel
      case ICamax >= 0{uA_per_uF}:
        0{uA_per_uF};
      otherwise:
        ICamax;
    endsel;
    PKprime = PK/(1{dimensionless}+Icabar/ICahalf);
    a1_K = Ki*exp(VF_over_RT)-Ko;
    a2_K = exp(VF_over_RT)-1{dimensionless};
    ICaK = PKprime*Open*yCa*VFsq_over_RT*a1_K/a2_K;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/chebi/CHEBI:38634
  def comp INa as
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Temp_Scale: dimensionless;
    var alpha1: per_ms;
    var beta1: per_ms;
    var gamma1: per_ms;
    var Delta1: per_ms;
    var On: per_ms;
    var Of: per_ms;
    var GammaGamma: per_ms;
    var DeltaDelta: per_ms;
    var epsilon: per_ms;
    var omega_na: per_ms;
    var rho: per_ms;
    var mu: per_ms;
    var Cn: per_ms;
    var Cf: per_ms;
    var parameter_a: dimensionless;
    var k12: per_ms;
    var k23: per_ms;
    var k34: per_ms;
    var k45: per_ms;
    var k56: per_ms;
    var k67: per_ms;
    var k89: per_ms;
    var k910: per_ms;
    var k1011: per_ms;
    var k1112: per_ms;
    var k1213: per_ms;
    var k57: per_ms;
    var k21: per_ms;
    var k32: per_ms;
    var k43: per_ms;
    var k54: per_ms;
    var k65: per_ms;
    var k76: per_ms;
    var k98: per_ms;
    var k109: per_ms;
    var k1110: per_ms;
    var k1211: per_ms;
    var k1312: per_ms;
    var k75: per_ms;
    var k81: per_ms;
    var k92: per_ms;
    var k103: per_ms;
    var k114: per_ms;
    var k125: per_ms;
    var k136: per_ms;
    var k18: per_ms;
    var k29: per_ms;
    var k310: per_ms;
    var k411: per_ms;
    var k512: per_ms;
    var k613: per_ms;
    var na1: dimensionless {init: 0.1437575649, pub: out};
    var na2: dimensionless {init: 0.0417776208, pub: out};
    var na3: dimensionless {init: 0.004552898364, pub: out};
    var na4: dimensionless {init: 2.20520743e-4, pub: out};
    var na5: dimensionless {init: 4.005266484e-6, pub: out};
    var na6: dimensionless {init: 1.57442749e-8, pub: out};
    var na7: dimensionless {init: 2.856607179e-9, pub: out};
    var na8: dimensionless {init: 0.4749950008, pub: out};
    var na9: dimensionless {init: 0.2707214097, pub: out};
    var na10: dimensionless {init: 0.05786120057, pub: out};
    var na11: dimensionless {init: 0.005496292279, pub: out};
    var na12: dimensionless {init: 1.957874519e-4, pub: out};
    var na13: dimensionless {init: 4.17679396e-4, pub: out};
    var TNa: kelvin {init: 294.16};
    var KToverH: per_ms;
    var FoverRT: per_mV;
    var RToverF: mV {pub: in};
    var RTNa: joule_per_mole;
    var RTNaF: mV;
    var Faraday: coulomb_per_millimole {pub: in};
    var Rgas: joule_per_mole_kelvin {pub: in};
    FoverRT = 1{dimensionless}/RToverF;
    KToverH = 1.381e-23{joule_per_kelvin}*TNa/6.626e-31{joule_ms};
    RTNa = Rgas*TNa;
    RTNaF = Rgas*TNa/Faraday;
    Temp_Scale = 1.38862291252871{dimensionless};
    alpha1 = Temp_Scale*KToverH*exp(-114007.462700232{joule_per_mole}/RTNa+224.114{joule_per_mole_kelvin}/Rgas+0.286374268596235{dimensionless}*V/RTNaF);
    beta1 = Temp_Scale*KToverH*exp(-272470.273489681{joule_per_mole}/RTNa+708.146{joule_per_mole_kelvin}/Rgas+(-2.28528417586424{dimensionless}*V/RTNaF));
    gamma1 = Temp_Scale*KToverH*exp(-196336.575735923{joule_per_mole}/RTNa+529.952{joule_per_mole_kelvin}/Rgas+2.78084918596045{dimensionless}*V/RTNaF);
    Delta1 = Temp_Scale*KToverH*exp(-133689.9304091{joule_per_mole}/RTNa+229.205{joule_per_mole_kelvin}/Rgas+(-1.55804214553883{dimensionless}*V/RTNaF));
    On = Temp_Scale*KToverH*exp(-62123.0784380481{joule_per_mole}/RTNa+39.295{joule_per_mole_kelvin}/Rgas+0.288816042743232{dimensionless}*V/RTNaF);
    Of = Temp_Scale*KToverH*exp(-97657.8497137015{joule_per_mole}/RTNa+1.51{joule_per_mole_kelvin}/Rgas+0.0684861993100685{dimensionless}*V/RTNaF);
    GammaGamma = Temp_Scale*KToverH*exp(116431.142142348{joule_per_mole}/RTNa+(-578.317{joule_per_mole_kelvin}/Rgas)+0.764126011745707{dimensionless}*V/RTNaF);
    DeltaDelta = Temp_Scale*KToverH*exp(-55700.6624658307{joule_per_mole}/RTNa+(-130.639{joule_per_mole_kelvin}/Rgas)+(-3.64981672927078{dimensionless}*V/RTNaF));
    epsilon = Temp_Scale*KToverH*exp(-85800.3675578326{joule_per_mole}/RTNa+70.078{joule_per_mole_kelvin}/Rgas);
    omega_na = Temp_Scale*KToverH*exp(-121955.166154864{joule_per_mole}/RTNa+225.175{joule_per_mole_kelvin}/Rgas);
    rho = Temp_Scale*KToverH*exp(-147813.990005035{joule_per_mole}/RTNa+338.915{joule_per_mole_kelvin}/Rgas+2.1360043702126{dimensionless}*V/RTNaF);
    mu = Temp_Scale*KToverH*exp(-121322.143275242{joule_per_mole}/RTNa+193.265{joule_per_mole_kelvin}/Rgas+(-1.74290267020903{dimensionless}*V/RTNaF));
    Cn = Temp_Scale*KToverH*exp(-287913.446530953{joule_per_mole}/RTNa+786.217{joule_per_mole_kelvin}/Rgas);
    Cf = Temp_Scale*KToverH*exp(-59565.2236284584{joule_per_mole}/RTNa+0.00711{joule_per_mole_kelvin}/Rgas);
    parameter_a = 1.40042625477401{dimensionless};
    k12 = 4{dimensionless}*alpha1;
    k23 = 3{dimensionless}*alpha1;
    k34 = 2{dimensionless}*alpha1;
    k45 = alpha1;
    k56 = gamma1;
    k67 = epsilon;
    k89 = k12*parameter_a;
    k910 = k23*parameter_a;
    k1011 = k34*parameter_a;
    k1112 = k45*parameter_a;
    k1213 = GammaGamma;
    k57 = rho;
    k21 = beta1;
    k32 = 2{dimensionless}*beta1;
    k43 = 3{dimensionless}*beta1;
    k54 = 4{dimensionless}*beta1;
    k65 = Delta1;
    k76 = omega_na;
    k98 = k21/parameter_a;
    k109 = k32/parameter_a;
    k1110 = k43/parameter_a;
    k1211 = k54/parameter_a;
    k1312 = DeltaDelta;
    k75 = mu;
    k81 = Cf;
    k92 = k81/parameter_a;
    k103 = k92/parameter_a;
    k114 = k103/parameter_a;
    k125 = k114/parameter_a;
    k136 = Of;
    k18 = Cn;
    k29 = k18*parameter_a;
    k310 = k29*parameter_a;
    k411 = k310*parameter_a;
    k512 = k411*parameter_a;
    k613 = On;
    ode(na1, time) = -(k18+k12)*na1+k21*na2+k81*na8;
    ode(na2, time) = k12*na1-(k21+k23+k29)*na2+k32*na3+k92*na9;
    ode(na3, time) = k23*na2-(k32+k34+k310)*na3+k43*na4+k103*na10;
    ode(na4, time) = k34*na3-(k43+k45+k411)*na4+k54*na5+k114*na11;
    ode(na5, time) = k45*na4-(k54+k56+k57+k512)*na5+k65*na6+k75*na7+k125*na12;
    ode(na6, time) = k56*na5-(k65+k67+k613)*na6+k76*na7+k136*na13;
    ode(na7, time) = k57*na5+k67*na6-(k75+k76)*na7;
    ode(na8, time) = k18*na1-(k81+k89)*na8+k98*na9;
    ode(na9, time) = k29*na2+k89*na8-(k98+k92+k910)*na9+k109*na10;
    ode(na10, time) = k310*na3+k910*na9-(k1011+k103+k109)*na10+k1110*na11;
    ode(na11, time) = k411*na4+k1011*na10-(k1110+k114+k1112)*na11+k1211*na12;
    ode(na12, time) = k512*na5+k1112*na11-(k1211+k125+k1213)*na12+k1312*na13;
    ode(na13, time) = k613*na6+k1213*na12-(k1312+k136)*na13;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp IKr as
    var T_Const_HERG: dimensionless {init: 5.320000001};
    var A0_HERG: per_ms {init: 0.017147641733086};
    var B0_HERG: per_mV {init: 0.03304608038835};
    var A1_HERG: per_ms {init: 0.03969328381141};
    var B1_HERG: per_mV {init: -0.0430605416398};
    var A2_HERG: per_ms {init: 0.02057448605977};
    var B2_HERG: per_mV {init: 0.02617412715118};
    var A3_HERG: per_ms {init: 0.00134366604423};
    var B3_HERG: per_mV {init: -0.02691385498399};
    var A4_HERG: per_ms {init: 0.10666316491288};
    var B4_HERG: per_mV {init: 0.00568908859717};
    var A5_HERG: per_ms {init: 0.00646393910049};
    var B5_HERG: per_mV {init: -0.04536642959543};
    var A6_HERG: per_ms {init: 0.00008039374403};
    var B6_HERG: per_mV {init: 0.00000069808924};
    var C2H_to_C3H: per_ms;
    var C3H_to_C2H: per_ms;
    var C1H_to_C2H: per_ms;
    var C2H_to_C1H: per_ms;
    var C3H_to_OH: per_ms;
    var OH_to_C3H: per_ms;
    var OH_to_IH: per_ms;
    var IH_to_OH: per_ms;
    var C3H_to_IH: per_ms;
    var IH_to_C3H: per_ms;
    var V: mV {pub: in};
    var C1Herg: dimensionless {init: 0.996697338, pub: out};
    var a1_C2: per_ms;
    var a2_C2: per_ms;
    var C2Herg: dimensionless {init: 4.340879648e-4, pub: out};
    var a1_C3: per_ms;
    var a2_C3: per_ms;
    var C3Herg: dimensionless {init: 7.634099755000001e-5, pub: out};
    var a1_O: per_ms;
    var a2_O: per_ms;
    var OHerg: dimensionless {init: 9.511789113e-6, pub: out};
    var a1_I: per_ms;
    var a2_I: per_ms;
    var IHerg: dimensionless {init: 1.533347007e-6, pub: out};
    var time: ms {pub: in};
    C2H_to_C3H = T_Const_HERG*0.02608362043337{per_ms};
    C3H_to_C2H = T_Const_HERG*0.14832978132145{per_ms};
    C1H_to_C2H = T_Const_HERG*A0_HERG*exp(B0_HERG*V);
    C2H_to_C1H = T_Const_HERG*A1_HERG*exp(B1_HERG*V);
    C3H_to_OH = T_Const_HERG*A2_HERG*exp(B2_HERG*V);
    OH_to_C3H = T_Const_HERG*A3_HERG*exp(B3_HERG*V);
    OH_to_IH = T_Const_HERG*A4_HERG*exp(B4_HERG*V);
    IH_to_OH = T_Const_HERG*A5_HERG*exp(B5_HERG*V);
    C3H_to_IH = T_Const_HERG*A6_HERG*exp(B6_HERG*V);
    IH_to_C3H = OH_to_C3H*IH_to_OH*C3H_to_IH/(C3H_to_OH*OH_to_IH);
    ode(C1Herg, time) = C2H_to_C1H*C2Herg-C1H_to_C2H*C1Herg;
    a1_C2 = C1H_to_C2H*C1Herg+C3H_to_C2H*C3Herg;
    a2_C2 = (C2H_to_C1H+C2H_to_C3H)*C2Herg;
    ode(C2Herg, time) = a1_C2-a2_C2;
    a1_C3 = C2H_to_C3H*C2Herg+OH_to_C3H*OHerg+IH_to_C3H*IHerg;
    a2_C3 = (C3H_to_IH+C3H_to_OH+C3H_to_C2H)*C3Herg;
    ode(C3Herg, time) = a1_C3-a2_C3;
    a1_O = C3H_to_OH*C3Herg+IH_to_OH*IHerg;
    a2_O = (OH_to_C3H+OH_to_IH)*OHerg;
    ode(OHerg, time) = a1_O-a2_O;
    a1_I = C3H_to_IH*C3Herg+OH_to_IH*OHerg;
    a2_I = (IH_to_C3H+IH_to_OH)*IHerg;
    ode(IHerg, time) = a1_I-a2_I;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp IKs as
    var C0ks_C1ks: per_ms;
    var C1ks_O1ks: per_ms;
    var O1ks_O2ks: per_ms;
    var O1ks_C1ks: per_ms;
    var O2ks_O1ks: per_ms;
    var C1ks_C0ks: per_ms;
    var C0ks: dimensionless {init: 0.9645606295, pub: out};
    var C1ks: dimensionless {init: 0.03542613568, pub: out};
    var O1ks: dimensionless {init: 2.491710696e-7, pub: out};
    var O2ks: dimensionless {init: 1.298547822e-5, pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    C0ks_C1ks = 0.00795600798004{per_ms};
    C1ks_O1ks = 0.03966720676071{per_ms};
    O1ks_O2ks = 0.00767254363063{per_ms}*exp(0.08662945914655{per_mV}*V);
    O1ks_C1ks = 0.00700806628929{per_ms}*exp(-0.14999754700285{per_mV}*V);
    O2ks_O1ks = 0.00379737998368{per_ms}*exp(-0.01425668126881{per_mV}*V);
    C1ks_C0ks = 0.2162557589585{per_ms}*exp(-0.00001889123021{per_mV}*V);
    ode(C0ks, time) = -C0ks_C1ks*C0ks+C1ks_C0ks*C1ks;
    ode(C1ks, time) = C0ks_C1ks*C0ks-(C1ks_C0ks+C1ks_O1ks)*C1ks+O1ks_C1ks*O1ks;
    ode(O1ks, time) = C1ks_O1ks*C1ks-(O1ks_C1ks+O1ks_O2ks)*O1ks+O2ks_O1ks*O2ks;
    ode(O2ks, time) = O1ks_O2ks*O1ks-O2ks_O1ks*O2ks;
  enddef;

  def comp cell as
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;
  def map between environment and IKs for
    vars time and time;
  enddef;
  def map between environment and COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES for
    vars time and time;
  enddef;
  def map between environment and IKr for
    vars time and time;
  enddef;
  def map between environment and INa for
    vars time and time;
  enddef;
  def map between environment and COMPUTE_DERIVATIVES_OF_Kv1_4_CHANNEL_STATES for
    vars time and time;
  enddef;
  def map between environment and COMPUTE_DERIVATIVES_OF_Kv4_3_CHANNEL_STATES for
    vars time and time;
  enddef;
  def map between environment and COMPUTE_DERIVATIVES_OF_LTYPE_CHANNEL_STATES for
    vars time and time;
  enddef;
  def map between environment and COMPUTE_DERIVATIVES_OF_RyR_RECEPTOR_STATES for
    vars time and time;
  enddef;
  def map between environment and COMPUTE_Jtrpn_and_BUFFER_SCALE_FACTORS for
    vars time and time;
  enddef;
  def map between environment and I_stimulus for
    vars time and time;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and IKs for
    vars V and V;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and IKr for
    vars V and V;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and INa for
    vars V and V;
    vars RT_over_F and RToverF;
    vars Faraday and Faraday;
    vars Rgas and Rgas;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_DERIVATIVES_OF_Kv1_4_CHANNEL_STATES for
    vars V and V;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_DERIVATIVES_OF_Kv4_3_CHANNEL_STATES for
    vars V and V;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_DERIVATIVES_OF_LTYPE_CHANNEL_STATES for
    vars V and V;
    vars CaSS and CaSS;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_INaK_INaCa_ICab_IpCa for
    vars V and V;
    vars INaCa and INaCa;
    vars INaK and INaK;
    vars ICab and ICab;
    vars IpCa and IpCa;
    vars RT_over_F and RT_over_F;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Cai and Cai;
    vars Cao and Cao;
  enddef;
  def map between COMPUTE_REVERSAL_POTENTIALS and COMPUTE_INaK_INaCa_ICab_IpCa for
    vars ECa and ECa;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_INa_IKr_IKs_Ito1_IK1_INab_IKp for
    vars V and V;
    vars INa and INa;
    vars INab and INab;
    vars IKr and IKr;
    vars IKv14_Na and IKv14_Na;
    vars IKs and IKs;
    vars IK1 and IK1;
    vars Ito1 and Ito1;
    vars IKv43 and IKv43;
    vars IKv14_K and IKv14_K;
    vars Ko and Ko;
    vars Ki and Ki;
    vars Nao and Nao;
    vars Nai and Nai;
    vars RT_over_F and RT_over_F;
    vars Faraday and Faraday;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_ICa_ICaK for
    vars V and V;
    vars ICaK and ICaK;
    vars ICa and ICa;
    vars Faraday and Faraday;
    vars Ko and Ko;
    vars Ki and Ki;
    vars RT_over_F and RT_over_F;
    vars Cai and Cai;
    vars Cao and Cao;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_DERIVATIVES_OF_RyR_RECEPTOR_STATES for
    vars CaSS and CaSS;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_Jtrpn_and_BUFFER_SCALE_FACTORS for
    vars Cai and Cai;
    vars CaJSR and CaJSR;
    vars CaSS and CaSS;
    vars beta_SS and beta_SS;
    vars beta_JSR and beta_JSR;
    vars beta_i and beta_i;
    vars Jtrpn and Jtrpn;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_INTRACELLULAR_CALCIUM_FLUXES for
    vars Cai and Cai;
    vars CaNSR and CaNSR;
    vars CaJSR and CaJSR;
    vars CaSS and CaSS;
    vars Jxfer and Jxfer;
    vars Jup and Jup;
    vars Jrel and Jrel;
    vars Jtr and Jtr;
  enddef;
  def map between COMPUTE_DERIVATIVES_OF_RyR_RECEPTOR_STATES and COMPUTE_INTRACELLULAR_CALCIUM_FLUXES for
    vars O1_RyR and O1_RyR;
    vars O2_RyR and O2_RyR;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and I_stimulus for
    vars i_Stim and i_Stim;
  enddef;
  def map between COMPUTE_CONCENTRATION_AND_VOLTAGE_DERIVATIVES and COMPUTE_REVERSAL_POTENTIALS for
    vars RT_over_F and RT_over_F;
    vars Nai and Nai;
    vars Ki and Ki;
    vars Cai and Cai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Cao and Cao;
  enddef;
  def map between COMPUTE_INa_IKr_IKs_Ito1_IK1_INab_IKp and INa for
    vars na6 and na6;
    vars na7 and na7;
  enddef;
  def map between COMPUTE_INa_IKr_IKs_Ito1_IK1_INab_IKp and COMPUTE_DERIVATIVES_OF_Kv1_4_CHANNEL_STATES for
    vars OKv14 and OKv14;
  enddef;
  def map between COMPUTE_INa_IKr_IKs_Ito1_IK1_INab_IKp and COMPUTE_REVERSAL_POTENTIALS for
    vars ENa and ENa;
    vars EK and EK;
  enddef;
  def map between COMPUTE_INa_IKr_IKs_Ito1_IK1_INab_IKp and IKr for
    vars OHerg and OHerg;
  enddef;
  def map between COMPUTE_INa_IKr_IKs_Ito1_IK1_INab_IKp and IKs for
    vars O2ks and O2ks;
    vars O1ks and O1ks;
  enddef;
  def map between COMPUTE_INa_IKr_IKs_Ito1_IK1_INab_IKp and COMPUTE_DERIVATIVES_OF_Kv4_3_CHANNEL_STATES for
    vars OKv43 and OKv43;
  enddef;
  def map between COMPUTE_ICa_ICaK and COMPUTE_DERIVATIVES_OF_LTYPE_CHANNEL_STATES for
    vars yCa and yCa;
    vars Open and Open;
  enddef;
enddef;
