<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 13/05/2010 at 5:34:04 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="shorten_2000" cmeta:id="shorten_2000" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>A Hodgkin-Huxley Model Exhibiting Bursting Oscillations</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs in OpenCell and COR and the units are consistent throughout. It it an accurate reproduction of the paper equations but does not reproduce the published results for unknown reasons, possibly because initial conditions for state variables were guessed. 
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: We investigate bursting behaviour generated in an electrophysiological model of pituitary corticotrophs. The active and silent phases of this mode of bursting are generated by moving between two stable oscillatory solutions. The bursting is indirectly driven by slow modulation of the endoplasmic reticulum Ca2+ concentration. The model exhibits different modes of bursting, and we investigate mode transitions and similar modes of bursting in other Hodgkin-Huxley models. Bifurcation analysis and the use of null-surfaces facilitate a geometric interpretation of the model bursting modes and action potential generation, respectively.
</para>

<para>
The original paper reference is cited below:
</para>
				<para>
A Hodgkin-Huxley Model Exhibiting Bursting Oscillations, Paul R. Shorten and David J.N. Wall, 2000, <emphasis>Bulletin of Mathematical Biology</emphasis>, 62, 695-715.   <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10938629&amp;dopt=Abstract">PubMed ID: 10938629</ulink>
				</para>
				
				<informalfigure float="0" id="fig_cell_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>cell schematic for the model</title>
							</objectinfo>
							<imagedata fileref="shorten_wall_2000.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of a pituitary corticotroph cell showing the transmembrane ionic currents and the intracellular Ca<superscript>2+</superscript> dynamics captured by the mathematical model.  Arrows indicate ionic channels and pumps.  <emphasis>I<subscript>Ca-L</subscript>
						</emphasis> represents an L-type Ca<superscript>2+</superscript> current responsible for most of the Ca<superscript>2+</superscript> influx during an action potential.  <emphasis>I<subscript>Ca-T</subscript>
						</emphasis> is a T-type voltage-sensitive Ca<superscript>2+</superscript> current.  A voltage-sensitive K<superscript>+</superscript> current, <emphasis>I<subscript>K-DR</subscript>
						</emphasis>, is mainly responsible for action potential repolarisation.  A Ca<superscript>2+</superscript>-activated K<superscript>+</superscript> current, <emphasis>I<subscript>K-Ca</subscript>
						</emphasis>, is essential for bursting behaviour.  The remaining leak current, <emphasis>I<subscript>leak</subscript>
						</emphasis>, represents all other ionic fluxes across the plasma membrane which are not specifically described by the model.  <emphasis>J<subscript>eff</subscript>
						</emphasis> and <emphasis>J<subscript>up</subscript>
						</emphasis> are the ER and plasma membrane Ca<superscript>2+</superscript>-ATPase pumps, and <emphasis>J<subscript>rel</subscript>
						</emphasis> represents the ER Ca<superscript>2+</superscript> leakage term.  Within the ER and the cytosol, significant portions of Ca<superscript>2+</superscript> are bound to buffers, denoted by B<subscript>er</subscript> and B<subscript>c</subscript> respectively.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	
	<rdf:RDF>
		<rdf:Bag rdf:about="rdf:#96808c5c-c465-4f6b-a7b4-1fce4571e2d8">
			<rdf:li>Pituitary Corticotrophs</rdf:li>
			<rdf:li>corticotroph</rdf:li>
			<rdf:li>calcium dynamics</rdf:li>
			<rdf:li>electrophysiology</rdf:li>
			<rdf:li>pituitary</rdf:li>
			<rdf:li>hodgkin-huxley</rdf:li>
		</rdf:Bag>
		<rdf:Seq rdf:about="rdf:#3b2c2689-14a6-4107-b255-2de23469186d">
			<rdf:li rdf:resource="rdf:#49be5d18-a14e-40db-bc2f-447760b4d3db"/>
			<rdf:li rdf:resource="rdf:#78d04e07-85a8-48be-ae7a-7e088cb09131"/>
		</rdf:Seq>
		<rdf:Description rdf:about="rdf:#2a4b068b-509f-48a4-8abc-86c2be52540b">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#56940d30-8488-4245-a744-1881af38730f">
			<vCard:Given>Paul</vCard:Given>
			<vCard:Family>Shorten</vCard:Family>
			<vCard:Other>R</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ecf5dbf9-ed41-4a3b-acce-2b2f67a9a288">
			<vCard:Given>Autumn</vCard:Given>
			<vCard:Family>Cuellar</vCard:Family>
			<vCard:Other>A</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#419665cf-565b-4e43-aa25-b6c56f271430">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#49be5d18-a14e-40db-bc2f-447760b4d3db">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#56940d30-8488-4245-a744-1881af38730f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#78d04e07-85a8-48be-ae7a-7e088cb09131">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#93f1b066-0f0d-4685-9f88-e3cf4085858f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#680d54d6-4946-470f-be25-f7953200365d">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a4ca7b80-4324-4bda-9dd7-7be5d909d1a0">
			<dcterms:W3CDTF>2002-12-03</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="#shorten_2000">
			<dc:title>
         Shorten and Wall's 2000 Hodgkin-Huxley type mathematical model of 
         bursting oscillations in pituitary corticotrophs. 
      </dc:title>
			<cmeta:bio_entity xmlns:cmeta="http://www.cellml.org/metadata/1.0#">Pituitary Corticotrophs</cmeta:bio_entity>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#22a8032f-b5ae-4b1f-8bcc-f3004132fb30"/>
			<bqs:reference rdf:resource="rdf:#93a7f045-e5bf-4c40-8b19-8f6be5b8d339"/>
			<bqs:reference rdf:resource="rdf:#b16bf41f-113a-4369-8500-d337554e323f"/>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
			<cmeta:modification xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#9f5b4aca-c29c-4022-b698-61d89e4de54a"/>
			<dcterms:created rdf:resource="rdf:#a4ca7b80-4324-4bda-9dd7-7be5d909d1a0"/>
			<dc:creator rdf:resource="rdf:#02fff4be-1c68-422b-8950-f3b2eca6f3a7"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ea511990-dde8-4070-afd8-3050d6987e24">
			<dc:title>Bulletin of Mathematical Biology</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#22a8032f-b5ae-4b1f-8bcc-f3004132fb30">
			<dc:creator rdf:resource="rdf:#d6977cb9-b89e-4464-93f2-f8f7f4049e83"/>
			<rdf:value>
          This is the CellML description of Shorten and Wall's 2000 
          Hodgkin-Huxley type mathematical model of bursting oscillations in 
          pituitary corticotrophs. 
        </rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#e1ea7750-f364-4b01-b85a-afd4638860d8">
			<vCard:N rdf:resource="rdf:#ecf5dbf9-ed41-4a3b-acce-2b2f67a9a288"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#02fff4be-1c68-422b-8950-f3b2eca6f3a7">
			<vCard:ORG rdf:resource="rdf:#2a4b068b-509f-48a4-8abc-86c2be52540b"/>
			<vCard:EMAIL rdf:resource="rdf:#680d54d6-4946-470f-be25-f7953200365d"/>
			<vCard:N rdf:resource="rdf:#419665cf-565b-4e43-aa25-b6c56f271430"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#9f5b4aca-c29c-4022-b698-61d89e4de54a">
			<dcterms:modified rdf:resource="rdf:#ec786568-fceb-4536-9983-3883a6c3d271"/>
			<rdf:value>
          Added publication date information.
        </rdf:value>
			<cmeta:modifier xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#e1ea7750-f364-4b01-b85a-afd4638860d8"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#93f1b066-0f0d-4685-9f88-e3cf4085858f">
			<vCard:Given>David</vCard:Given>
			<vCard:Family>Wall</vCard:Family>
			<vCard:Other>J</vCard:Other>
			<vCard:Other>N</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#93a7f045-e5bf-4c40-8b19-8f6be5b8d339">
			<dc:subject rdf:resource="rdf:#608e84ec-57c2-4134-b804-84a84fadc75a"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d6977cb9-b89e-4464-93f2-f8f7f4049e83">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b4cf885f-a2c4-438e-87b2-a926a36dbb85">
			<dc:creator rdf:resource="rdf:#3b2c2689-14a6-4107-b255-2de23469186d"/>
			<dc:title>
            A Hodgkin-Huxley Model Exhibiting Bursting Oscillations
          </dc:title>
			<bqs:volume>62</bqs:volume>
			<bqs:first_page>695</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#ea511990-dde8-4070-afd8-3050d6987e24"/>
			<dcterms:issued rdf:resource="rdf:#4fbbbb65-1454-487f-afe7-a46eea90dd0b"/>
			<bqs:last_page>715</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4fbbbb65-1454-487f-afe7-a46eea90dd0b">
			<dcterms:W3CDTF>2000-07</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#608e84ec-57c2-4134-b804-84a84fadc75a">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value rdf:resource="rdf:#96808c5c-c465-4f6b-a7b4-1fce4571e2d8"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ec786568-fceb-4536-9983-3883a6c3d271">
			<dcterms:W3CDTF>2003-04-09</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b16bf41f-113a-4369-8500-d337554e323f">
			<bqs:Pubmed_id>10938629</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#b4cf885f-a2c4-438e-87b2-a926a36dbb85"/>
		</rdf:Description>
	</rdf:RDF>   
	
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millisecond">
      <unit units="second" prefix="milli"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millivolt">
      <unit units="volt" prefix="milli"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picoL">
      <unit units="litre" prefix="pico"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picoF">
      <unit units="farad" prefix="pico"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picoA">
      <unit units="ampere" prefix="pico"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millimolar">
      <unit units="mole" prefix="milli"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millivolt_millimolar">
      <unit units="millivolt"/>
      <unit units="millimolar"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="picoL_per_millisecond">
      <unit units="picoL"/>
      <unit units="millisecond" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millimolar_per_millisecond">
      <unit units="millimolar"/>
      <unit units="millisecond" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millimolar_micrometre_per_millisecond">
      <unit units="millimolar"/>
      <unit units="micrometre"/>
      <unit units="millisecond" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millimolar_micrometre_per_millisecond_per_picoA">
      <unit units="millimolar"/>
      <unit units="micrometre"/>
      <unit units="millisecond" exponent="-1"/>
      <unit units="ampere" prefix="pico" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="nanoS_per_millimolar">
      <unit units="siemens" prefix="nano"/>
      <unit units="millimolar" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millimolar_picoL_per_millisecond">
      <unit units="millimolar"/>
      <unit units="picoL"/>
      <unit units="millisecond" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="nanoS">
      <unit units="siemens" prefix="nano"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="micrometre">
      <unit units="metre" prefix="micro"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_micrometre">
      <unit units="micrometre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="joule_per_kilomole_kelvin">
      <unit units="joule"/>
      <unit units="mole" prefix="kilo" exponent="-1"/>
      <unit units="kelvin" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="coulomb_per_mole">
      <unit units="coulomb"/>
      <unit units="mole" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="millisecond" public_interface="out"/>
      <variable name="V_cell" units="picoL" initial_value="1.77" public_interface="out"/>
      <variable name="Ca_e" units="millimolar" initial_value="20" public_interface="out"/>
      <variable name="K_e" units="millimolar" initial_value="5.6" public_interface="out"/>
      <variable name="K_i" units="millimolar" initial_value="140" public_interface="out"/>
      <variable name="V_tau" units="millivolt" initial_value="-60" public_interface="out"/>
      <variable name="k_tau" units="millivolt" initial_value="22" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="membrane">
      <variable name="V" units="millivolt" initial_value="-70" public_interface="out"/>
      <variable name="R" units="joule_per_kilomole_kelvin" initial_value="8314" public_interface="out"/>
      <variable name="T" units="kelvin" initial_value="310" public_interface="out"/>
      <variable name="F" units="coulomb_per_mole" initial_value="96845" public_interface="out"/>
      <variable name="Cm" units="picoF" initial_value="7"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="i_Ca_L" units="picoA" public_interface="in"/>
      <variable name="i_Ca_T" units="picoA" public_interface="in"/>
      <variable name="i_K_DR" units="picoA" public_interface="in"/>
      <variable name="i_K_Ca" units="picoA" public_interface="in"/>
      <variable name="i_leak" units="picoA" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <ci>i_Ca_L</ci>
                     <ci>i_Ca_T</ci>
                     <ci>i_K_DR</ci>
                     <ci>i_K_Ca</ci>
                     <ci>i_leak</ci>
                  </apply>
               </apply>
               <ci>Cm</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="L_type_calcium_current">
      <variable name="i_Ca_L" units="picoA" public_interface="out"/>
      <variable name="phi_Ca" units="millivolt_millimolar" public_interface="out"/>
      <variable name="g_Ca_L" units="nanoS_per_millimolar" initial_value="9"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="V_tau" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="k_tau" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="R" units="joule_per_kilomole_kelvin" public_interface="in"/>
      <variable name="T" units="kelvin" public_interface="in"/>
      <variable name="F" units="coulomb_per_mole" public_interface="in"/>
      <variable name="Ca_e" units="millimolar" public_interface="in"/>
      <variable name="Ca_i" units="millimolar" public_interface="in"/>
      <variable name="m_L" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Ca_L</ci>
            <apply>
               <times/>
               <ci>g_Ca_L</ci>
               <apply>
                  <power/>
                  <ci>m_L</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
               <ci>phi_Ca</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>phi_Ca</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>V</ci>
                  <apply>
                     <minus/>
                     <ci>Ca_i</ci>
                     <ci>Ca_e</ci>
                  </apply>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <apply>
                              <minus/>
                              <cn cellml:units="dimensionless">2</cn>
                           </apply>
                           <ci>F</ci>
                           <ci>V</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>R</ci>
                           <ci>T</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <apply>
                              <minus/>
                              <cn cellml:units="dimensionless">2</cn>
                           </apply>
                           <ci>F</ci>
                           <ci>V</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>R</ci>
                           <ci>T</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="L_type_calcium_current_m_gate">
      <variable name="m_L" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="m_L_infinity" units="dimensionless"/>
      <variable name="tau_m_L" units="millisecond"/>
      <variable name="tau_m_L_max" units="millisecond" initial_value="27"/>
      <variable name="V_m_L" units="millivolt" initial_value="-18"/>
      <variable name="k_m_L" units="millivolt" initial_value="12"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="V_tau" units="millivolt" public_interface="in"/>
      <variable name="k_tau" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m_L</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>m_L_infinity</ci>
                  <ci>m_L</ci>
               </apply>
               <ci>tau_m_L</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>m_L_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>V_m_L</ci>
                           <ci>V</ci>
                        </apply>
                        <ci>k_m_L</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_m_L</ci>
            <apply>
               <divide/>
               <ci>tau_m_L_max</ci>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>V</ci>
                           <ci>V_tau</ci>
                        </apply>
                        <ci>k_tau</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">2</cn>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <times/>
                              <cn cellml:units="dimensionless">2</cn>
                              <apply>
                                 <minus/>
                                 <ci>V_tau</ci>
                                 <ci>V</ci>
                              </apply>
                           </apply>
                           <ci>k_tau</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="T_type_calcium_current">
      <variable name="i_Ca_T" units="picoA" public_interface="out"/>
      <variable name="g_Ca_T" units="nanoS_per_millimolar" initial_value="10"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="V_tau" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="k_tau" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="phi_Ca" units="millivolt_millimolar" public_interface="in"/>
      <variable name="m_T" units="dimensionless" private_interface="in"/>
      <variable name="h_T" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Ca_T</ci>
            <apply>
               <times/>
               <ci>g_Ca_T</ci>
               <apply>
                  <power/>
                  <ci>m_T</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
               <ci>h_T</ci>
               <ci>phi_Ca</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="T_type_calcium_current_m_gate">
      <variable name="m_T" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="m_T_infinity" units="dimensionless"/>
      <variable name="tau_m_T" units="millisecond"/>
      <variable name="tau_m_T_max" units="millisecond" initial_value="10"/>
      <variable name="V_m_T" units="millivolt" initial_value="-30"/>
      <variable name="k_m_T" units="millivolt" initial_value="10.5"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="V_tau" units="millivolt" public_interface="in"/>
      <variable name="k_tau" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m_T</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>m_T_infinity</ci>
                  <ci>m_T</ci>
               </apply>
               <ci>tau_m_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>m_T_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>V_m_T</ci>
                           <ci>V</ci>
                        </apply>
                        <ci>k_m_T</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_m_T</ci>
            <apply>
               <divide/>
               <ci>tau_m_T_max</ci>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>V</ci>
                           <ci>V_tau</ci>
                        </apply>
                        <ci>k_tau</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">2</cn>
                     <apply>
                        <exp/>
                        <apply>
                           <divide/>
                           <apply>
                              <times/>
                              <cn cellml:units="dimensionless">2</cn>
                              <apply>
                                 <minus/>
                                 <ci>V_tau</ci>
                                 <ci>V</ci>
                              </apply>
                           </apply>
                           <ci>k_tau</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="T_type_calcium_current_h_gate">
      <variable name="h_T" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="h_T_infinity" units="dimensionless"/>
      <variable name="tau_h_T" units="millisecond" initial_value="15"/>
      <variable name="V_h_T" units="millivolt" initial_value="-57"/>
      <variable name="k_h_T" units="millivolt" initial_value="5"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h_T</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>h_T_infinity</ci>
                  <ci>h_T</ci>
               </apply>
               <ci>tau_h_T</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>h_T_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>V</ci>
                           <ci>V_h_T</ci>
                        </apply>
                        <ci>k_h_T</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="voltage_sensitive_K_current">
      <variable name="i_K_DR" units="picoA" public_interface="out"/>
      <variable name="phi_K" units="millivolt_millimolar" public_interface="out"/>
      <variable name="g_K_DR" units="nanoS_per_millimolar" initial_value="0.1"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="R" units="joule_per_kilomole_kelvin" public_interface="in"/>
      <variable name="T" units="kelvin" public_interface="in"/>
      <variable name="F" units="coulomb_per_mole" public_interface="in"/>
      <variable name="K_e" units="millimolar" public_interface="in"/>
      <variable name="K_i" units="millimolar" public_interface="in"/>
      <variable name="n" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K_DR</ci>
            <apply>
               <times/>
               <ci>g_K_DR</ci>
               <ci>n</ci>
               <ci>phi_K</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>phi_K</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>V</ci>
                  <apply>
                     <minus/>
                     <ci>K_i</ci>
                     <ci>K_e</ci>
                  </apply>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <apply>
                              <minus/>
                              <cn cellml:units="dimensionless">1</cn>
                           </apply>
                           <ci>F</ci>
                           <ci>V</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>R</ci>
                           <ci>T</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <apply>
                              <minus/>
                              <cn cellml:units="dimensionless">1</cn>
                           </apply>
                           <ci>F</ci>
                           <ci>V</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>R</ci>
                           <ci>T</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="voltage_sensitive_K_current_n_gate">
      <variable name="n" units="dimensionless" initial_value="0" public_interface="out"/>
      <variable name="n_infinity" units="dimensionless"/>
      <variable name="tau_n" units="millisecond" initial_value="20"/>
      <variable name="V_n" units="millivolt" initial_value="-20"/>
      <variable name="k_n" units="millivolt" initial_value="4.5"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>n_infinity</ci>
                  <ci>n</ci>
               </apply>
               <ci>tau_n</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>n_infinity</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <ci>V_n</ci>
                           <ci>V</ci>
                        </apply>
                        <ci>k_n</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="Ca_activated_K_current">
      <variable name="i_K_Ca" units="picoA" public_interface="out"/>
      <variable name="g_K_Ca" units="nanoS_per_millimolar" initial_value="0.09"/>
      <variable name="Kc" units="millimolar" initial_value="0.0004"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="phi_K" units="millivolt_millimolar" public_interface="in"/>
      <variable name="Ca_i" units="millimolar" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K_Ca</ci>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>g_K_Ca</ci>
                     <apply>
                        <power/>
                        <ci>Ca_i</ci>
                        <cn cellml:units="dimensionless">4</cn>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <power/>
                        <ci>Ca_i</ci>
                        <cn cellml:units="dimensionless">4</cn>
                     </apply>
                     <apply>
                        <power/>
                        <ci>Kc</ci>
                        <cn cellml:units="dimensionless">4</cn>
                     </apply>
                  </apply>
               </apply>
               <ci>phi_K</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="leak_current">
      <variable name="i_leak" units="picoA" public_interface="out"/>
      <variable name="g_L" units="nanoS" initial_value="0.3"/>
      <variable name="V_L" units="millivolt" initial_value="-67"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_leak</ci>
            <apply>
               <times/>
               <ci>g_L</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>V_L</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="ER_calcium">
      <variable name="Ca_er" units="millimolar" initial_value="0.0172" public_interface="out"/>
      <variable name="J_rel" units="millimolar_picoL_per_millisecond" public_interface="out"/>
      <variable name="J_up" units="millimolar_picoL_per_millisecond" public_interface="out"/>
      <variable name="V_er" units="picoL"/>
      <variable name="K_er" units="millimolar" initial_value="0.0002"/>
      <variable name="f_er" units="dimensionless" initial_value="0.0025"/>
      <variable name="P" units="picoL_per_millisecond" initial_value="0.0012"/>
      <variable name="v_er" units="millimolar_picoL_per_millisecond" initial_value="0.00005"/>
      <variable name="Ca_i" units="millimolar" public_interface="in"/>
      <variable name="V_cell" units="picoL" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca_er</ci>
            </apply>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <apply>
                     <minus/>
                     <ci>f_er</ci>
                  </apply>
                  <ci>V_er</ci>
               </apply>
               <apply>
                  <minus/>
                  <ci>J_rel</ci>
                  <ci>J_up</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>J_rel</ci>
            <apply>
               <times/>
               <ci>P</ci>
               <apply>
                  <minus/>
                  <ci>Ca_er</ci>
                  <ci>Ca_i</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>J_up</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>v_er</ci>
                  <apply>
                     <power/>
                     <ci>Ca_i</ci>
                     <cn cellml:units="dimensionless">2</cn>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <power/>
                     <ci>Ca_i</ci>
                     <cn cellml:units="dimensionless">2</cn>
                  </apply>
                  <apply>
                     <power/>
                     <ci>K_er</ci>
                     <cn cellml:units="dimensionless">2</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>V_er</ci>
            <apply>
               <times/>
               <ci>V_cell</ci>
               <cn cellml:units="dimensionless">0.15</cn>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="cytosolic_calcium">
      <variable name="Ca_i" units="millimolar" initial_value="0.00026" public_interface="out"/>
      <variable name="V_c" units="picoL"/>
      <variable name="K_p" units="millimolar" initial_value="0.00008"/>
      <variable name="f_cyt" units="dimensionless" initial_value="0.01"/>
      <variable name="v_p" units="millimolar_micrometre_per_millisecond" initial_value="0.000045"/>
      <variable name="J_in" units="millimolar_micrometre_per_millisecond"/>
      <variable name="J_eff" units="millimolar_micrometre_per_millisecond"/>
      <variable name="alpha" units="millimolar_micrometre_per_millisecond_per_picoA" initial_value="0.0000074"/>
      <variable name="beta" units="per_micrometre" initial_value="0.47"/>
      <variable name="i_Ca_L" units="picoA" public_interface="in"/>
      <variable name="i_Ca_T" units="picoA" public_interface="in"/>
      <variable name="J_rel" units="millimolar_picoL_per_millisecond" public_interface="in"/>
      <variable name="J_up" units="millimolar_picoL_per_millisecond" public_interface="in"/>
      <variable name="V_cell" units="picoL" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ca_i</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <ci>f_cyt</ci>
                     <ci>V_c</ci>
                  </apply>
                  <apply>
                     <minus/>
                     <ci>J_rel</ci>
                     <ci>J_up</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>f_cyt</ci>
                  <ci>beta</ci>
                  <apply>
                     <minus/>
                     <ci>J_in</ci>
                     <ci>J_eff</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>J_in</ci>
            <apply>
               <times/>
               <apply>
                  <minus/>
                  <ci>alpha</ci>
               </apply>
               <apply>
                  <plus/>
                  <ci>i_Ca_L</ci>
                  <ci>i_Ca_T</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>J_eff</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>v_p</ci>
                  <apply>
                     <power/>
                     <ci>Ca_i</ci>
                     <cn cellml:units="dimensionless">2</cn>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <power/>
                     <ci>Ca_i</ci>
                     <cn cellml:units="dimensionless">2</cn>
                  </apply>
                  <apply>
                     <power/>
                     <ci>K_p</ci>
                     <cn cellml:units="dimensionless">2</cn>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>V_c</ci>
            <apply>
               <times/>
               <ci>V_cell</ci>
               <cn cellml:units="dimensionless">0.85</cn>
            </apply>
         </apply>
      </math>
   </component>
   <group xmlns="http://www.cellml.org/cellml/1.0#">
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="L_type_calcium_current">
            <component_ref component="L_type_calcium_current_m_gate"/>
         </component_ref>
         <component_ref component="T_type_calcium_current">
            <component_ref component="T_type_calcium_current_m_gate"/>
            <component_ref component="T_type_calcium_current_h_gate"/>
         </component_ref>
         <component_ref component="voltage_sensitive_K_current">
            <component_ref component="voltage_sensitive_K_current_n_gate"/>
         </component_ref>
         <component_ref component="Ca_activated_K_current"/>
         <component_ref component="leak_current"/>
         <component_ref component="ER_calcium"/>
         <component_ref component="cytosolic_calcium"/>
      </component_ref>
   </group>
   <group xmlns="http://www.cellml.org/cellml/1.0#">
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="L_type_calcium_current">
         <component_ref component="L_type_calcium_current_m_gate"/>
      </component_ref>
      <component_ref component="T_type_calcium_current">
         <component_ref component="T_type_calcium_current_m_gate"/>
         <component_ref component="T_type_calcium_current_h_gate"/>
      </component_ref>
      <component_ref component="voltage_sensitive_K_current">
         <component_ref component="voltage_sensitive_K_current_n_gate"/>
      </component_ref>
   </group>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="L_type_calcium_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="Ca_e" variable_2="Ca_e"/>
      <map_variables variable_1="V_tau" variable_2="V_tau"/>
      <map_variables variable_1="k_tau" variable_2="k_tau"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="T_type_calcium_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V_tau" variable_2="V_tau"/>
      <map_variables variable_1="k_tau" variable_2="k_tau"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="voltage_sensitive_K_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="K_e" variable_2="K_e"/>
      <map_variables variable_1="K_i" variable_2="K_i"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Ca_activated_K_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="leak_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ER_calcium" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V_cell" variable_2="V_cell"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="cytosolic_calcium" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V_cell" variable_2="V_cell"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="L_type_calcium_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_Ca_L" variable_2="i_Ca_L"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="F" variable_2="F"/>
      <map_variables variable_1="T" variable_2="T"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="T_type_calcium_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_Ca_T" variable_2="i_Ca_T"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="voltage_sensitive_K_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_K_DR" variable_2="i_K_DR"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="F" variable_2="F"/>
      <map_variables variable_1="T" variable_2="T"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="Ca_activated_K_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_K_Ca" variable_2="i_K_Ca"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="leak_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_leak" variable_2="i_leak"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="L_type_calcium_current" component_2="T_type_calcium_current"/>
      <map_variables variable_1="phi_Ca" variable_2="phi_Ca"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="L_type_calcium_current" component_2="cytosolic_calcium"/>
      <map_variables variable_1="Ca_i" variable_2="Ca_i"/>
      <map_variables variable_1="i_Ca_L" variable_2="i_Ca_L"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="T_type_calcium_current" component_2="cytosolic_calcium"/>
      <map_variables variable_1="i_Ca_T" variable_2="i_Ca_T"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="voltage_sensitive_K_current" component_2="Ca_activated_K_current"/>
      <map_variables variable_1="phi_K" variable_2="phi_K"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Ca_activated_K_current" component_2="cytosolic_calcium"/>
      <map_variables variable_1="Ca_i" variable_2="Ca_i"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ER_calcium" component_2="cytosolic_calcium"/>
      <map_variables variable_1="Ca_i" variable_2="Ca_i"/>
      <map_variables variable_1="J_rel" variable_2="J_rel"/>
      <map_variables variable_1="J_up" variable_2="J_up"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="L_type_calcium_current" component_2="L_type_calcium_current_m_gate"/>
      <map_variables variable_1="m_L" variable_2="m_L"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="V_tau" variable_2="V_tau"/>
      <map_variables variable_1="k_tau" variable_2="k_tau"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="T_type_calcium_current" component_2="T_type_calcium_current_m_gate"/>
      <map_variables variable_1="m_T" variable_2="m_T"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="V_tau" variable_2="V_tau"/>
      <map_variables variable_1="k_tau" variable_2="k_tau"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="T_type_calcium_current" component_2="T_type_calcium_current_h_gate"/>
      <map_variables variable_1="h_T" variable_2="h_T"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="voltage_sensitive_K_current" component_2="voltage_sensitive_K_current_n_gate"/>
      <map_variables variable_1="n" variable_2="n"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
</model>
