// This CellML file was generated on 02/10/2007 at 17:26:58 using:
//
// COR (0.9.31.793)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// comment: FN James Lawson; The Noble98 (Noble et al. 1998) model of the guinea-pig ventricular cell was a development of the Noble91 (Noble et al. 1991) model and included representation of the components of IK, (IKr and IKs), the persistent sodium current and a dyadic space between the sarcolemma and the sarcoplasmic reticulum. In several important respects this model was a major improvement on the earlier model. However on rigorous testing for new applications problems associated with the calcium dynamics equations were found in the new model. The model demonstrated here is an attempt at 'correcting' the inability of Noble98 to reproduce a mechanism of initiation of Early After-Depolarizations (EADs), the voltage-dependence of calcium release from the sarcoplasmic reticulum (SR) and also to improve the shape of the calcium transient.
// simulation: pointDensity 100000; maximumStepSize 0.001
// reference: title Remodelling of Calcium Dynamics in Guinea-Pig Ventricular Cells; Given Dennis; Family Noble; Given Penny; Family Noble; W3CDTF 2001-01-01; title Journal of Physiology
def model noble_noble_2001 as
  // Noble Ventricular Cell Model 1998
  //
  // Penny Noble
  //
  // Oxford University
  //
  // Model Status
  //
  // This version of the model has been curated and unit checked and is known to run in PCEnv, COR and Jsim. A PCEnv session file is also available for this model.
  //
  // Model Structure
  //
  // The Noble98 (Noble et al. 1998) model of the guinea-pig ventricular cell was a development of the Noble91 (Noble et al. 1991) model and included representation of the components of IK, (IKr and IKs), the persistent sodium current and a dyadic space between the sarcolemma and the sarcoplasmic reticulum. In several important respects this model was a major improvement on the earlier model. However on rigorous testing for new applications problems associated with the calcium dynamics equations were found in the new model. The model demonstrated here is an attempt at 'correcting' the inability of Noble98 to reproduce a mechanism of initiation of Early After-Depolarizations (EADs), the voltage-dependence of calcium release from the sarcoplasmic reticulum (SR) and also to improve the shape of the calcium transient.
  //
  // model diagram
  //
  // Schematic diagram of the cell model.
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit nanoA_per_millimolar as
    unit ampere {pref: nano};
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030322
  // isVersionOf: http://identifiers.org/go/GO:0060075
  // isVersionOf: http://identifiers.org/go/GO:0042391
  def comp membrane as
    var V: millivolt {init: -93.0550060340878, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var Cm: microF {init: 9.5e-5};
    var time: second {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var i_K1: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_to: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks: nanoA {pub: in};
    var i_Ca_L_K_cyt: nanoA {pub: in};
    var i_Ca_L_K_ds: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_b_Na: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_p_Na: nanoA {pub: in};
    var i_Ca_L_Na_cyt: nanoA {pub: in};
    var i_Ca_L_Na_ds: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_cyt: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_ds: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var i_Ca_L_Ca_cyt: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L_Ca_ds: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_b_Ca: nanoA {pub: in};
    var i_Stim: nanoA;
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 600};
    var stim_period: second {init: 1};
    var stim_duration: second {init: 0.002};
    var stim_amplitude: nanoA {init: -6};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Stim+i_K1+i_to+i_Kr+i_Ks+i_NaK+i_Na+i_b_Na+i_p_Na+i_Ca_L_Na_cyt+i_Ca_L_Na_ds+i_NaCa_cyt+i_NaCa_ds+i_Ca_L_Ca_cyt+i_Ca_L_Ca_ds+i_Ca_L_K_cyt+i_Ca_L_K_ds+i_b_Ca);
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    // isVersionOf: http://identifiers.org//
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005267
    var E_K: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005267
    var E_Ks: millivolt {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38215
    var E_Ca: millivolt {pub: out};
    var E_mh: millivolt {pub: out};
    var P_kna: dimensionless {init: 0.03};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
    E_mh = R*T/F*ln((Na_o+0.12{dimensionless}*K_o)/(Na_i+0.12{dimensionless}*K_i));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005241
  // isVersionOf: http://identifiers.org/go/GO:0005242
  def comp time_independent_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005241
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var i_K1: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var K_mk1: millimolar {init: 10, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005241
    // isVersionOf: http://identifiers.org/go/GO:0005242
    var g_K1: microS {init: 0.5};
    var K_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    i_K1 = g_K1*K_o/(K_o+K_mk1)*(V-E_K)/(1{dimensionless}+exp((V-E_K-10{millivolt})*F*1.25{dimensionless}/(R*T)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_delayed_rectifier_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Kr: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_Kr1: microS {init: 0.0028};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_Kr2: microS {init: 0.0017};
    var E_K: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var xr1: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var xr2: dimensionless {priv: in};
    i_Kr = (g_Kr1*xr1+g_Kr2*xr2)*1{dimensionless}/(1{dimensionless}+exp((V+9{millivolt})/22.4{millivolt}))*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_delayed_rectifier_potassium_current_xr1_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var xr1: dimensionless {init: 9.88715446781661e-6, pub: out};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var alpha_xr1: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var beta_xr1: per_second;
    var time: second {pub: in};
    alpha_xr1 = 50{per_second}/(1{dimensionless}+exp(-(V-5{millivolt})/9{millivolt}));
    beta_xr1 = 0.05{per_second}*exp(-(V-20{millivolt})/15{millivolt});
    ode(xr1, time) = alpha_xr1*(1{dimensionless}-xr1)-beta_xr1*xr1;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp rapid_delayed_rectifier_potassium_current_xr2_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var xr2: dimensionless {init: 2.15138346929839e-7, pub: out};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var alpha_xr2: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var beta_xr2: per_second;
    var time: second {pub: in};
    alpha_xr2 = 50{per_second}/(1{dimensionless}+exp(-(V-5{millivolt})/9{millivolt}));
    beta_xr2 = 0.4{per_second}*exp(-pow((V+30{millivolt})/30{millivolt}, 3{dimensionless}));
    ode(xr2, time) = alpha_xr2*(1{dimensionless}-xr2)-beta_xr2*xr2;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp slow_delayed_rectifier_potassium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var i_Ks: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var g_Ks: microS {init: 0.0016};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var E_Ks: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var xs: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(xs)*(V-E_Ks);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005251
  def comp slow_delayed_rectifier_potassium_current_xs_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var xs: dimensionless {init: 6.72192033116639e-7, pub: out};
    var V: millivolt {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var alpha_xs: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005251
    var beta_xs: per_second;
    var time: second {pub: in};
    alpha_xs = 14{per_second}/(1{dimensionless}+exp(-(V-40{millivolt})/9{millivolt}));
    beta_xs = 1{per_second}*exp(-V/45{millivolt});
    ode(xs, time) = alpha_xs*(1{dimensionless}-xs)-beta_xs*xs;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_Na: microS {init: 0.5};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_mh: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {priv: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_m_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var m: dimensionless {init: 0.00157541794600382, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_m: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var delta_m: millivolt {init: 1e-5};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp fast_sodium_current_h_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var h: dimensionless {init: 0.99465397024286, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var alpha_h: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var beta_h: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var shift_h: millivolt {init: 0};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}-shift_h));
    beta_h = 2000{per_second}/(1{dimensionless}+320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}-shift_h)));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp persistent_sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_p_Na: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_pna: microS {init: 0.0027};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_p_Na = g_pna*1{dimensionless}/(1{dimensionless}+exp(-(V+52{millivolt})/8{millivolt}))*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp sodium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_b_Na: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_bna: microS {init: 0.0006};
    var Na_i: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var E_Na: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L_Ca_cyt: nanoA {pub: out};
    var i_Ca_L_K_cyt: nanoA {pub: out};
    var i_Ca_L_Na_cyt: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L_Ca_ds: nanoA {pub: out};
    var i_Ca_L_K_ds: nanoA {pub: out};
    var i_Ca_L_Na_ds: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var i_Ca_L: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var P_Ca_L: nanoA_per_millimolar {init: 1};
    var P_CaK: dimensionless {init: 0.002};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var P_CaNa: dimensionless {init: 0.01};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {priv: out, pub: in};
    var Ca_ds: millimolar {priv: out, pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d: dimensionless {priv: in};
    var CaChoncyt: dimensionless {priv: in};
    var CaChonds: dimensionless {priv: in};
    var KCaChoff: millimolar {init: 0.01, priv: out};
    var Kmdsinact: millimolar {init: 0.001, priv: out};
    var FrICa: dimensionless {init: 0.7};
    i_Ca_L_Ca_cyt = (1{dimensionless}-FrICa)*4{dimensionless}*P_Ca_L*d*CaChoncyt*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)))*(Ca_i*exp(100{millivolt}*F/(R*T))-Ca_o*exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)));
    i_Ca_L_K_cyt = (1{dimensionless}-FrICa)*P_CaK*P_Ca_L*d*CaChoncyt*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(K_i*exp(50{millivolt}*F/(R*T))-K_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Na_cyt = (1{dimensionless}-FrICa)*P_CaNa*P_Ca_L*d*CaChoncyt*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(Na_i*exp(50{millivolt}*F/(R*T))-Na_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Ca_ds = FrICa*4{dimensionless}*P_Ca_L*d*CaChonds*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)))*(Ca_i*exp(100{millivolt}*F/(R*T))-Ca_o*exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)));
    i_Ca_L_K_ds = FrICa*P_CaK*P_Ca_L*d*CaChonds*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(K_i*exp(50{millivolt}*F/(R*T))-K_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Na_ds = FrICa*P_CaNa*P_Ca_L*d*CaChonds*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(Na_i*exp(50{millivolt}*F/(R*T))-Na_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L = i_Ca_L_Ca_cyt+i_Ca_L_K_cyt+i_Ca_L_Na_cyt+i_Ca_L_Ca_ds+i_Ca_L_K_ds+i_Ca_L_Na_ds;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 2.27643784381792e-8, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E0_d: millivolt;
    var speed_d: dimensionless {init: 3};
    E0_d = V+24{millivolt}-5{millivolt};
    alpha_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        12{per_millivolt_second}*E0_d/(exp(E0_d/10{millivolt})-1{dimensionless});
    endsel;
    ode(d, time) = speed_d*(alpha_d*(1{dimensionless}-d)-beta_d*d);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 4.03082807230434e-9};
    var CaChoncyt: dimensionless {pub: out};
    var CaChonds: dimensionless {pub: out};
    var CaChoffcyt: dimensionless;
    var CaChoffds: dimensionless;
    var alpha_f: per_second;
    var beta_f: per_second;
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_ds: millimolar {pub: in};
    var KCaChoff: millimolar {pub: in};
    var Kmdsinact: millimolar {pub: in};
    var time: second {pub: in};
    var speed_f: dimensionless {init: 0.3};
    var delta_f: millivolt {init: 0.0001};
    var E0_f: millivolt;
    E0_f = V+34{millivolt};
    alpha_f = sel
      case abs(E0_f) < delta_f:
        25{per_second};
      otherwise:
        6.25{per_millivolt_second}*E0_f/(exp(E0_f/4{millivolt})-1{dimensionless});
    endsel;
    beta_f = 12{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    CaChoffcyt = Ca_i/(KCaChoff+Ca_i);
    ode(f, time) = (120{dimensionless}*(1{dimensionless}-f)*CaChoffcyt+(1{dimensionless}-f)*(1{dimensionless}-CaChoffcyt))*speed_f*beta_f-alpha_f*f;
    CaChoncyt = (1{dimensionless}-f)*(1{dimensionless}-CaChoffcyt);
    CaChoffds = Ca_ds/(Kmdsinact+Ca_ds);
    CaChonds = (1{dimensionless}-f)*(1{dimensionless}-CaChoffds);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp calcium_background_current as
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var i_b_Ca: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var g_bca: microS {init: 0.00025};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var E_Ca: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_current as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_to: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var g_to: microS {init: 0.005};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var g_tos: dimensionless {init: 0};
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: second {priv: out, pub: in};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(g_tos+s*(1{dimensionless}-g_tos))*r*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_current_s_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var s: dimensionless {init: 0.999870016703514, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var alpha_s: per_second;
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var beta_s: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_s = 0.033{per_second}*exp(-V/17{millivolt});
    beta_s = 33{per_second}/(1{dimensionless}+exp(-0.125{per_millivolt}*(V+10{millivolt})));
    ode(s, time) = alpha_s*(1{dimensionless}-s)-beta_s*s;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp transient_outward_current_r_gate as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var r: dimensionless {init: 1.8398417043009e-8, pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = 333{per_second}*(1{dimensionless}/(1{dimensionless}+exp(-(V+4{millivolt})/5{millivolt}))-r);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005391
  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0006815
  def comp sodium_potassium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK_max: nanoA {init: 0.7};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: second {pub: in};
    i_NaK = i_NaK_max*K_o/(K_mK+K_o)*Na_i/(K_mNa+Na_i);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp sodium_calcium_exchanger as
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_cyt: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_ds: nanoA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var k_NaCa: nanoA {init: 0.0005};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var n_NaCa: dimensionless {init: 3};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var d_NaCa: dimensionless {init: 0};
    var gamma: dimensionless {init: 0.2};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var FRiNaCa: dimensionless {init: 0.001};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_ds: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa_cyt = (1{dimensionless}-FRiNaCa)*k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_o, n_NaCa)*Ca_i)/((1{millimolar4}+d_NaCa*(Ca_i*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_i/0.0069{millimolar}));
    i_NaCa_ds = FRiNaCa*k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_o, n_NaCa)*Ca_ds)/((1{millimolar4}+d_NaCa*(Ca_ds*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_ds/0.0069{millimolar}));
    i_NaCa = i_NaCa_cyt+i_NaCa_ds;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0051208
  // isVersionOf: http://identifiers.org/go/GO:0070296
  def comp sarcoplasmic_reticulum_calcium_pump as
    var i_up: millimolar_per_second {pub: out};
    var K_1: dimensionless;
    var K_2: millimolar;
    var K_cyca: millimolar {init: 0.0003};
    var K_xcs: dimensionless {init: 0.4};
    var K_srca: millimolar {init: 0.5};
    var alpha_up: millimolar_per_second {init: 0.4};
    var beta_up: millimolar_per_second {init: 0.03};
    var Ca_i: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    K_1 = K_cyca*K_xcs/K_srca;
    K_2 = Ca_i+Ca_up*K_1+K_cyca*K_xcs+K_cyca;
    i_up = Ca_i/K_2*alpha_up-Ca_up*K_1/K_2*beta_up;
  enddef;

  def comp calcium_translocation as
    var i_trans: millimolar_per_second {pub: out};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    i_trans = 50{per_second}*(Ca_up-Ca_rel);
  enddef;

  def comp calcium_release as
    var i_rel: millimolar_per_second {pub: out};
    var VoltDep: dimensionless;
    var RegBindSite: dimensionless;
    var CaiReg: dimensionless;
    var CadsReg: dimensionless;
    var ActRate: per_second;
    var InactRate: per_second;
    var K_leak_rate: per_second {init: 0.05};
    var K_m_rel: per_second {init: 250};
    var K_m_Ca_cyt: millimolar {init: 0.0005};
    var K_m_Ca_ds: millimolar {init: 0.01};
    var PrecFrac: dimensionless;
    var ActFrac: dimensionless {init: 0.000183030061767109};
    var ProdFrac: dimensionless {init: 0.0109931117325847};
    var SpeedRel: dimensionless;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_ds: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    VoltDep = exp(0.08{per_millivolt}*(V-40{millivolt}));
    CaiReg = Ca_i/(Ca_i+K_m_Ca_cyt);
    CadsReg = Ca_ds/(Ca_ds+K_m_Ca_ds);
    RegBindSite = CaiReg+(1{dimensionless}-CaiReg)*CadsReg;
    ActRate = 0{per_second}*VoltDep+90{per_second}*sqr(RegBindSite);
    InactRate = 60{per_second}+500{per_second}*sqr(RegBindSite);
    SpeedRel = sel
      case V < -50{millivolt}:
        5{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    PrecFrac = 1{dimensionless}-ActFrac-ProdFrac;
    ode(ActFrac, time) = PrecFrac*SpeedRel*ActRate-ActFrac*SpeedRel*InactRate;
    ode(ProdFrac, time) = ActFrac*SpeedRel*InactRate-SpeedRel*1{per_second}*ProdFrac;
    i_rel = (sqr(ActFrac/(ActFrac+0.25{dimensionless}))*K_m_rel+K_leak_rate)*Ca_rel;
  enddef;

  def comp extracellular_sodium_concentration as
    var Na_o: millimolar {init: 140, pub: out};
  enddef;

  def comp intracellular_sodium_concentration as
    var Na_i: millimolar {init: 5.68929064089788, pub: out};
    var V_i: micrometre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_p_Na: nanoA {pub: in};
    var i_Ca_L_Na_cyt: nanoA {pub: in};
    var i_Ca_L_Na_ds: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa_cyt: nanoA {pub: in};
    ode(Na_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_Na+i_p_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa_cyt+i_Ca_L_Na_cyt+i_Ca_L_Na_ds);
  enddef;

  def comp extracellular_calcium_concentration as
    var Ca_o: millimolar {init: 2, pub: out};
  enddef;

  def comp extracellular_potassium_concentration as
    var K_o: millimolar {init: 4, pub: out};
  enddef;

  def comp intracellular_potassium_concentration as
    var K_i: millimolar {init: 138.49601832864, pub: out};
    var V_i: micrometre3 {pub: in};
    var i_K1: nanoA {pub: in};
    var i_Kr: nanoA {pub: in};
    var i_Ks: nanoA {pub: in};
    var i_Ca_L_K_cyt: nanoA {pub: in};
    var i_Ca_L_K_ds: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(K_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_K1+i_Kr+i_Ks+i_Ca_L_K_cyt+i_Ca_L_K_ds+i_to-2{dimensionless}*i_NaK);
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
  def comp intracellular_calcium_concentration as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: millimolar {init: 5.60867201979414e-6, pub: out};
    var Ca_ds: millimolar {init: 2.15623822848619e-7, pub: out};
    var Ca_up: millimolar {init: 0.187470810108547, pub: out};
    var Ca_rel: millimolar {init: 0.185609773872992, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var Ca_Calmod: millimolar {init: 0.000221858224298955};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var Ca_Trop: millimolar {init: 0.00013982468565579};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var Calmod: millimolar {init: 0.02};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var Trop: millimolar {init: 0.05};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var alpha_Calmod: per_millimolar_second {init: 100000};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var beta_Calmod: per_second {init: 50};
    // isVersionOf: http://identifiers.org//
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    var alpha_Trop: per_millimolar_second {init: 100000};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    var beta_Trop: per_second {init: 200};
    var radius: micrometre {init: 12};
    var length: micrometre {init: 74};
    var V_i: micrometre3 {pub: out};
    var V_Cell: micrometre3;
    var V_i_ratio: dimensionless;
    var V_ds_ratio: dimensionless {init: 0.1};
    var V_rel_ratio: dimensionless {init: 0.1};
    var V_e_ratio: dimensionless {init: 0.4};
    var V_up_ratio: dimensionless {init: 0.01};
    var Kdecay: per_second {init: 10};
    var i_up: millimolar_per_second {pub: in};
    var i_trans: millimolar_per_second {pub: in};
    var i_rel: millimolar_per_second {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_cyt: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var i_NaCa_ds: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0048763
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38215
    var i_Ca_L_Ca_cyt: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0048763
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38215
    var i_Ca_L_Ca_ds: nanoA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38807
    var i_b_Ca: nanoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    V_Cell = 3.141592654{dimensionless}*sqr(radius/1000{dimensionless})*length/1000{dimensionless};
    V_i_ratio = 1{dimensionless}-V_e_ratio-V_up_ratio-V_rel_ratio;
    V_i = V_Cell*V_i_ratio;
    ode(Ca_i, time) = -1{mA_nA}/(2{dimensionless}*1{litre_micrometre3}*V_i*F)*(i_Ca_L_Ca_cyt+i_b_Ca-2{dimensionless}*i_NaCa_cyt-2{dimensionless}*i_NaCa_ds)+Ca_ds*V_ds_ratio*Kdecay+i_rel*V_rel_ratio/V_i_ratio-ode(Ca_Calmod, time)-ode(Ca_Trop, time)-i_up;
    ode(Ca_ds, time) = -1{mA_nA}*i_Ca_L_Ca_ds/(2{dimensionless}*1{litre_micrometre3}*V_ds_ratio*V_i*F)-Ca_ds*Kdecay;
    ode(Ca_up, time) = V_i_ratio/V_up_ratio*i_up-i_trans;
    ode(Ca_rel, time) = V_up_ratio/V_rel_ratio*i_trans-i_rel;
    ode(Ca_Calmod, time) = alpha_Calmod*Ca_i*(Calmod-Ca_Calmod)-beta_Calmod*Ca_Calmod;
    ode(Ca_Trop, time) = alpha_Trop*Ca_i*(Trop-Ca_Trop)-beta_Trop*Ca_Trop;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
      endcomp;
      comp rapid_delayed_rectifier_potassium_current incl
        comp rapid_delayed_rectifier_potassium_current_xr1_gate;
        comp rapid_delayed_rectifier_potassium_current_xr2_gate;
      endcomp;
      comp slow_delayed_rectifier_potassium_current incl
        comp slow_delayed_rectifier_potassium_current_xs_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp persistent_sodium_current;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_calcium_exchanger;
      comp sarcoplasmic_reticulum_calcium_pump;
      comp calcium_translocation;
      comp calcium_release;
      comp extracellular_sodium_concentration;
      comp intracellular_sodium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
      comp extracellular_calcium_concentration;
      comp intracellular_calcium_concentration;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
    comp rapid_delayed_rectifier_potassium_current incl
      comp rapid_delayed_rectifier_potassium_current_xr1_gate;
      comp rapid_delayed_rectifier_potassium_current_xr2_gate;
    endcomp;
    comp slow_delayed_rectifier_potassium_current incl
      comp slow_delayed_rectifier_potassium_current_xs_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between persistent_sodium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_translocation and environment for
    vars time and time;
  enddef;
  def map between calcium_release and environment for
    vars time and time;
  enddef;
  def map between calcium_release and membrane for
    vars V and V;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L_Ca_cyt and i_Ca_L_Ca_cyt;
    vars i_Ca_L_Ca_ds and i_Ca_L_Ca_ds;
    vars i_Ca_L_Na_cyt and i_Ca_L_Na_cyt;
    vars i_Ca_L_Na_ds and i_Ca_L_Na_ds;
    vars i_Ca_L_K_cyt and i_Ca_L_K_cyt;
    vars i_Ca_L_K_ds and i_Ca_L_K_ds;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and rapid_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and persistent_sodium_current for
    vars V and V;
    vars i_p_Na and i_p_Na;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars V and V;
    vars i_NaCa_cyt and i_NaCa_cyt;
    vars i_NaCa_ds and i_NaCa_ds;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and intracellular_sodium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_potassium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_calcium_concentration for
    vars F and F;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and persistent_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and rapid_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_delayed_rectifier_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_mh and E_mh;
  enddef;
  def map between reversal_potentials and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between reversal_potentials and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between reversal_potentials and intracellular_potassium_concentration for
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and intracellular_sodium_concentration for
    vars Na_i and Na_i;
  enddef;
  def map between reversal_potentials and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between reversal_potentials and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and intracellular_potassium_concentration for
    vars i_K1 and i_K1;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and intracellular_potassium_concentration for
    vars i_Kr and i_Kr;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and intracellular_potassium_concentration for
    vars i_Ks and i_Ks;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_b_Na and i_b_Na;
    vars Na_i and Na_i;
  enddef;
  def map between persistent_sodium_current and intracellular_sodium_concentration for
    vars i_p_Na and i_p_Na;
  enddef;
  def map between L_type_Ca_channel and intracellular_sodium_concentration for
    vars i_Ca_L_Na_cyt and i_Ca_L_Na_cyt;
    vars i_Ca_L_Na_ds and i_Ca_L_Na_ds;
    vars Na_i and Na_i;
  enddef;
  def map between L_type_Ca_channel and intracellular_calcium_concentration for
    vars i_Ca_L_Ca_cyt and i_Ca_L_Ca_cyt;
    vars i_Ca_L_Ca_ds and i_Ca_L_Ca_ds;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between L_type_Ca_channel and intracellular_potassium_concentration for
    vars i_Ca_L_K_cyt and i_Ca_L_K_cyt;
    vars i_Ca_L_K_ds and i_Ca_L_K_ds;
    vars K_i and K_i;
  enddef;
  def map between L_type_Ca_channel and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between L_type_Ca_channel and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between L_type_Ca_channel and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between sodium_potassium_pump and intracellular_potassium_concentration for
    vars i_NaK and i_NaK;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars i_to and i_to;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_calcium_concentration for
    vars i_NaCa_cyt and i_NaCa_cyt;
    vars i_NaCa_ds and i_NaCa_ds;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_sodium_concentration for
    vars i_NaCa_cyt and i_NaCa_cyt;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and intracellular_calcium_concentration for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_translocation and intracellular_calcium_concentration for
    vars i_trans and i_trans;
    vars Ca_rel and Ca_rel;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_release and intracellular_calcium_concentration for
    vars i_rel and i_rel;
    vars Ca_rel and Ca_rel;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_xr1_gate for
    vars xr1 and xr1;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_xr2_gate for
    vars xr2 and xr2;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars CaChoncyt and CaChoncyt;
    vars CaChonds and CaChonds;
    vars KCaChoff and KCaChoff;
    vars Kmdsinact and Kmdsinact;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between intracellular_potassium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
enddef;
