//   FILE :  cortassa_model_2003.xml
//
// CREATED :  13th May 2003
//
// LAST MODIFIED : 13th May 2003
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Cortassa et al.'s 2003 integrated model of cardiac mitochondrial energy metabolism and calcium dynamics.
//
// CHANGES:
def model cortassa_aon_marban_winslow_orourke_2003_version01 as
  // Modelling Mitochondrial Energy Metabolism
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model has been checked in both OpenCell and COR and the units are consistent. Unfortunately the model will not integrate at the moment. We are working with the model author to complete the curation of this model.
  //
  // Model Structure
  //
  // The high metabolic rate of cardiac tissue necessitates close agreement between the rates of energy production and consumption. About 2 percent of cellular ATP is consumed per heartbeat, and under normal conditions, almost all of this energy is provided by mitochondrial oxidative phosphorylation. Although the chemiosmotic theory of energy transduction was developed by Michell in 1961, remarkably little has since been elucidated about the mechanisms underlying the control of mitochondrial metabolism.
  //
  // The thermokinetic model describes the tricarboxylic acid (TCA) cycle, oxidative phosphorylation, and mitochondrial Ca2+ dynamics (see below). The kinetic portion of the model includes effectors of the TCA cycle enzymes regulating production of NADH and FADH2. In turn, these are used by the electron transport chain to establish a proton motive force driving the F1F0-ATPase. In addition, mitochondrial matrix Ca2+, determined by Ca2+ uniporter and Ca2+/Na+ exchanger activities, controls the activity of the TCA cycle enzymes isocitrate dehydrogenase and alpha-ketoglutarate dehydrogenase. Model simulations are used to predict the response of mitochondria to changes in substrate delivery, metabolic inhibition, the rate of ATP/ADP exchange, and Ca2+ concentration. Model simulations are able to reproduce experimental data, which was taken as supporting evidence for the validity of the model. The steady-state and time-dependent behaviour of the model supports the hypothesis that mitochondrial matrix Ca2+ plays an important role in matching energy supply with demand in cardiac myocytes.
  //
  // Previously published models of mitochondrial energetics include the models of pancreatic beta-cell mitochondrial metabolism by Magnus and Keizer (see Mitochondrial Ca2+ Handling Model, 1997 (${HTML_EXMPL_MITOCHONDRIAL_CA_HANDLING})). An oxidative phosphorylation model has been developed by Korzeniewski (see The Oxidative Phosphorylation Pathway, 2001 (${HTML_EXMPL_OXIDATIVE_PHOSPHORYLATION})). However, these models, in common with other previously developed models of mitochondrial energetics, fail to include all the necessary variables. Together with the desire to improve understanding of mitochondrial metabolism, this has led Cortassa et al. to develop an integrated kinetic and thermodynamic model of cardiac mitochondrial energy metabolism. Their model has been described here in CellML (the raw CellML description of the Cortassa et al. model can be downloaded in various formats as described in ).
  //
  // The complete original paper reference is cited below:
  //
  // An Integrated Model of Cardiac Mitochondrial Energy Metabolism and Calcium Dynamics, Sonia Cortassa, Miguel A. Aon, Eduardo Marban, Raimond L. Winslow, and Brian O'Rourke, 2003, Biophysical Journal, 84, 2734-2755.PubMed ID: 12668482 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12668482&dopt=Abstract)
  //
  // reaction diagram
  //
  // A schematic diagram of the reactions used in the model of the glycogenolysis pathway in skeletal muscle.
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_volt as
    unit millimolar;
    unit volt {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit micromolar_per_second as
    unit micromolar;
    unit second {expo: -1};
  enddef;
  def unit micromolar_per_millimolar as
    unit micromolar;
    unit millimolar {expo: -1};
  enddef;
  def unit flux as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_second_volt as
    unit millimolar;
    unit second {expo: -1};
    unit volt {expo: -1};
  enddef;
  def unit volt_coulomb_per_mole_kelvin as
    unit volt;
    unit coulomb;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
  def comp ADP_m as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_m: millimolar {init: 0.1, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0051503
    // isVersionOf: http://identifiers.org/go/GO:0000295
    var V_ANT: flux {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0000275
    // isVersionOf: http://identifiers.org/go/GO:0000276
    var V_ATPase: flux {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0004056
    var V_SL: flux {pub: in};
    var time: second {pub: in};
    ode(ADP_m, time) = V_ANT-(V_ATPase+V_SL);
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:16908
  def comp NADH as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16908
    var NADH: millimolar {init: 0.01, pub: out};
    var V_O2: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0004448
    // hasVersion: http://identifiers.org/go/GO:0004449
    // hasVersion: http://identifiers.org/go/GO:0004450
    // hasVersion: http://identifiers.org/go/GO:0045242
    var V_IDH: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0005947
    var V_KGDH: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0016615
    // hasVersion: http://identifiers.org/go/GO:0046554
    var V_MDH: flux {pub: in};
    var time: second {pub: in};
    ode(NADH, time) = -V_O2+V_IDH+V_KGDH+V_MDH;
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:36454
  // hasVersion: http://identifiers.org/chebi/CHEBI:36453
  // hasVersion: http://identifiers.org/chebi/CHEBI:16087
  def comp ISOC as
    // hasVersion: http://identifiers.org/chebi/CHEBI:36454
    // hasVersion: http://identifiers.org/chebi/CHEBI:36453
    // hasVersion: http://identifiers.org/chebi/CHEBI:16087
    var ISOC: millimolar {init: 0.01, pub: out};
    var V_ACO: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0004448
    // hasVersion: http://identifiers.org/go/GO:0004449
    // hasVersion: http://identifiers.org/go/GO:0004450
    // hasVersion: http://identifiers.org/go/GO:0005962
    var V_IDH: flux {pub: in};
    var time: second {pub: in};
    ode(ISOC, time) = V_ACO-V_IDH;
  enddef;

  // hasVersion: http://identifiers.org/go/GO:0005947
  // hasVersion: http://identifiers.org/go/GO:0015139
  // hasVersion: http://identifiers.org/go/GO:0015742
  def comp alpha_KG as
    // hasVersion: http://identifiers.org/go/GO:0015139
    // hasVersion: http://identifiers.org/go/GO:0015742
    // hasVersion: http://identifiers.org/go/GO:0006840
    var alpha_KG: millimolar {init: 0.01, pub: out};
    var V_IDH: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0005947
    var V_KGDH: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0046571
    // hasVersion: http://identifiers.org/go/GO:0047319
    var V_AAT: flux {pub: in};
    var time: second {pub: in};
    ode(alpha_KG, time) = V_AAT+V_IDH+(-V_KGDH);
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:15380
  def comp SCoA as
    // hasVersion: http://identifiers.org/chebi/CHEBI:15380
    var SCoA: millimolar {init: 0.01, pub: out};
    // hasVersion: http://identifiers.org/go/GO:0005947
    var V_KGDH: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0004056
    var V_SL: flux {pub: in};
    var time: second {pub: in};
    ode(SCoA, time) = V_KGDH-V_SL;
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:51381
  def comp Suc as
    // hasVersion: http://identifiers.org/chebi/CHEBI:51381
    var Suc: millimolar {init: 0.01, pub: out};
    // hasVersion: http://identifiers.org/go/GO:0004056
    var V_SL: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0000104
    // hasVersion: http://identifiers.org/go/GO:0045281
    var V_SDH: flux {pub: in};
    var time: second {pub: in};
    ode(Suc, time) = V_SL-V_SDH;
  enddef;

  // hasVersion: http://identifiers.org/go/GO:0004333
  def comp FUM as
    // hasVersion: http://identifiers.org/go/GO:0004333
    var FUM: millimolar {init: 0.01, pub: out};
    // hasVersion: http://identifiers.org/go/GO:0000104
    // hasVersion: http://identifiers.org/go/GO:0045281
    var V_SDH: flux {pub: in};
    // hasVersion: http://identifiers.org/chebi/CHEBI:50921
    // hasVersion: http://identifiers.org/chebi/CHEBI:37154
    // hasVersion: http://identifiers.org/chebi/CHEBI:29806
    var V_FH: flux {pub: in};
    var time: second {pub: in};
    ode(FUM, time) = V_SDH-V_FH;
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:50220
  def comp MAL as
    // hasVersion: http://identifiers.org/chebi/CHEBI:50220
    var MAL: millimolar {init: 0.01, pub: out};
    // hasVersion: http://identifiers.org/go/GO:0016615
    // hasVersion: http://identifiers.org/go/GO:0046554
    // hasVersion: http://identifiers.org/go/GO:0004333
    var V_FH: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0016615
    var V_MDH: flux {pub: in};
    var time: second {pub: in};
    ode(MAL, time) = V_FH-V_MDH;
  enddef;

  // hasVersion: http://identifiers.org/go/GO:0046571
  // hasVersion: http://identifiers.org/go/GO:0047319
  // hasVersion: http://identifiers.org/go/GO:0008483
  // hasVersion: http://identifiers.org/go/GO:0006531
  def comp OAA as
    // hasVersion: http://identifiers.org/go/GO:0008483
    var OAA: millimolar {init: 0.01, pub: out};
    // hasVersion: http://identifiers.org/go/GO:0016615
    var V_MDH: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0003878
    var V_CS: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0008483
    var V_AAT: flux {pub: in};
    var time: second {pub: in};
    ode(OAA, time) = V_MDH-(V_CS+V_AAT);
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:35391
  // hasVersion: http://identifiers.org/chebi/CHEBI:29995
  // hasVersion: http://identifiers.org/go/GO:0015810
  def comp ASP as
    // hasVersion: http://identifiers.org/chebi/CHEBI:35391
    // hasVersion: http://identifiers.org/chebi/CHEBI:29995
    var ASP: millimolar {init: 0.01, pub: out};
    // hasVersion: http://identifiers.org/chebi/CHEBI:35391
    // hasVersion: http://identifiers.org/chebi/CHEBI:29995
    var V_AAT: flux {pub: in};
    var V_C_ASP: flux {pub: in};
    var time: second {pub: in};
    ode(ASP, time) = V_AAT-V_C_ASP;
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:39124
  def comp Ca_m as
    // hasVersion: http://identifiers.org/chebi/CHEBI:39124
    var Ca_m: micromolar {init: 0.01, pub: out};
    var f: dimensionless {init: 0.0003};
    var V_uni: flux {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0030181
    var V_NaCa: flux {pub: in};
    var time: second {pub: in};
    ode(Ca_m, time) = f*1{micromolar_per_millimolar}*(V_uni-V_NaCa);
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:39124
  def comp Ca_i as
    // hasVersion: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: micromolar {pub: out};
    var stim_start: second {init: 0};
    var stim_end: second {init: 10000};
    var stim_period: second;
    var stim_duration: second {init: 0.4};
    var pulse_value: micromolar {init: 1};
    var time: second {pub: in};
    Ca_i = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        pulse_value;
      otherwise:
        0.1{micromolar};
    endsel;
    stim_period = sel
      case (time >= 100{second}) and (time < 300{second}):
        0.5{second};
      otherwise:
        4{second};
    endsel;
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:26708
  def comp Na_i as
    // hasVersion: http://identifiers.org/chebi/CHEBI:26708
    var Na_i: millimolar {init: 10.0, pub: out};
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:15422
  def comp ATP_i as
    // hasVersion: http://identifiers.org/chebi/CHEBI:15422
    var ATP_i: millimolar {init: 6.5, pub: out};
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:15422
  def comp ATP_m as
    // hasVersion: http://identifiers.org/chebi/CHEBI:15422
    var ATP_m: millimolar {pub: out};
    var Cm: millimolar {init: 15.0};
    // hasVersion: http://identifiers.org/chebi/CHEBI:16761
    var ADP_m: millimolar {pub: in};
    ATP_m = Cm-ADP_m;
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
  def comp ADP_i as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_i: millimolar {pub: out};
    var pulse_value: millimolar {init: 0.15};
    var time: second {pub: in};
    ADP_i = sel
      case (time >= 100{second}) and (time < 300{second}):
        pulse_value;
      otherwise:
        0.05{millimolar};
    endsel;
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:29987
  // hasVersion: http://identifiers.org/chebi/CHEBI:14321
  // hasVersion: http://identifiers.org/go/GO:0015259
  def comp GLU as
    // hasVersion: http://identifiers.org/chebi/CHEBI:29987
    // hasVersion: http://identifiers.org/chebi/CHEBI:14321
    // hasVersion: http://identifiers.org/go/GO:0015259
    var GLU: millimolar {init: 20, pub: out};
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:25107
  def comp Mg as
    // hasVersion: http://identifiers.org/chebi/CHEBI:25107
    var Mg: millimolar {init: 0.4, pub: out};
  enddef;

  // title: H
  // alternative: proton
  def comp H as
    var H: millimolar {init: 2.5E-5, pub: out};
  enddef;

  // title: Pi
  // alternative: inorganic phosphate
  def comp Pi as
    var Pi: millimolar {init: 20.0, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:15346
  def comp CoA as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15346
    var CoA: millimolar {init: 0.02, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:15351
  // hasVersion: http://identifiers.org/chebi/CHEBI:15351
  def comp AcCoA as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15351
    // hasVersion: http://identifiers.org/chebi/CHEBI:15351
    var AcCoA: millimolar {init: 0.0002, pub: out};
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:16238
  def comp FAD as
    // hasVersion: http://identifiers.org/chebi/CHEBI:16238
    var FAD: millimolar {init: 0.01, pub: out};
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:17877
  def comp FADH2 as
    // hasVersion: http://identifiers.org/chebi/CHEBI:17877
    var FADH2: millimolar {init: 1.24, pub: out};
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:13389
  def comp NAD as
    // hasVersion: http://identifiers.org/chebi/CHEBI:13389
    var NAD: millimolar {pub: out};
    // hasVersion: http://identifiers.org/chebi/CHEBI:16908
    var NADH: millimolar {pub: in};
    var C_PN: millimolar {init: 10.0};
    NAD = C_PN-NADH;
  enddef;

  // hasVersion: http://identifiers.org/chebi/CHEBI:30769
  def comp CIT as
    // hasVersion: http://identifiers.org/chebi/CHEBI:30769
    var CIT: millimolar {pub: out};
    // hasVersion: http://identifiers.org/chebi/CHEBI:36453
    // hasVersion: http://identifiers.org/chebi/CHEBI:16087
    var ISOC: millimolar {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0005947
    // hasVersion: http://identifiers.org/go/GO:0015139
    // hasVersion: http://identifiers.org/go/GO:0015742
    // hasVersion: http://identifiers.org/go/GO:0006840
    var alpha_KG: millimolar {pub: in};
    // hasVersion: http://identifiers.org/chebi/CHEBI:15380
    var SCoA: millimolar {pub: in};
    // hasVersion: http://identifiers.org/chebi/CHEBI:51381
    var Suc: millimolar {pub: in};
    // hasVersion: http://identifiers.org/chebi/CHEBI:50921
    // hasVersion: http://identifiers.org/chebi/CHEBI:37154
    // hasVersion: http://identifiers.org/chebi/CHEBI:29806
    var FUM: millimolar {pub: in};
    // hasVersion: http://identifiers.org/chebi/CHEBI:50220
    // hasVersion: http://identifiers.org/go/GO:0071423
    // hasVersion: http://identifiers.org/go/GO:0015140
    // hasVersion: http://identifiers.org/go/GO:0015743
    // hasVersion: http://identifiers.org/chebi/CHEBI:15595
    var MAL: millimolar {pub: in};
    var OAA: millimolar {pub: in};
    var C_Kint: millimolar {init: 1.0};
    CIT = C_Kint-(ISOC+alpha_KG+SCoA+Suc+FUM+MAL+OAA);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022810
  // isVersionOf: http://identifiers.org/go/GO:0015292
  // isVersionOf: http://identifiers.org/go/GO:0031966
  def comp mitochondrial_membrane as
    var delta_psi_m: volt {init: 0.01, pub: out};
    var R: volt_coulomb_per_mole_kelvin {init: 8.315, pub: out};
    var T: kelvin {init: 310.16, pub: out};
    var F: coulomb_per_mole {init: 96480, pub: out};
    var C_mito: millimolar_per_volt {init: 1.812};
    var V_He: flux {pub: in};
    var V_He_F: flux {pub: in};
    var V_Hu: flux {pub: in};
    var V_ANT: flux {pub: in};
    var V_Hleak: flux {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var V_NaCa: flux {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022810
    // isVersionOf: http://identifiers.org/go/GO:0015292
    var V_uni: flux {pub: in};
    var time: second {pub: in};
    ode(delta_psi_m, time) = (V_He+V_He_F+(-(V_Hu+V_ANT+V_Hleak+V_NaCa+2.0{dimensionless}*V_uni)))/C_mito;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0003878
  // hasVersion: http://identifiers.org/go/GO:0003878
  def comp V_CS as
    // isVersionOf: http://identifiers.org/go/GO:0003878
    // hasVersion: http://identifiers.org/go/GO:0003878
    var V_CS: flux {pub: out};
    var OAA: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15351
    var AcCoA: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15351
    var Km_AcCoA: millimolar {init: 1.26E-2};
    var Km_OAA: millimolar {init: 6.4E-4};
    // hasVersion: http://identifiers.org/go/GO:0003878
    var Kcat_CS: first_order_rate_constant {init: 3.2};
    // hasVersion: http://identifiers.org/go/GO:0003878
    var ET_CS: millimolar {init: 0.4};
    V_CS = Kcat_CS*ET_CS/(1.0{dimensionless}+Km_AcCoA/AcCoA+Km_OAA/OAA+Km_AcCoA/AcCoA*(Km_OAA/OAA));
  enddef;

  def comp V_ACO as
    var V_ACO: flux {pub: out};
    // hasVersion: http://identifiers.org/chebi/CHEBI:30769
    var CIT: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:36454
    // isVersionOf: http://identifiers.org/chebi/CHEBI:36453
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16087
    // isVersionOf: http://identifiers.org/go/GO:0006102
    var ISOC: millimolar {pub: in};
    var Kf_ACO: first_order_rate_constant {init: 12.5};
    var KE_ACO: dimensionless {init: 2.22};
    V_ACO = Kf_ACO*(CIT-ISOC/KE_ACO);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0004448
  // isVersionOf: http://identifiers.org/go/GO:0004449
  // isVersionOf: http://identifiers.org/go/GO:0004450
  // isVersionOf: http://identifiers.org/go/GO:0045242
  // isVersionOf: http://identifiers.org/go/GO:0005962
  def comp V_IDH as
    // isVersionOf: http://identifiers.org/go/GO:0004448
    // isVersionOf: http://identifiers.org/go/GO:0004449
    // isVersionOf: http://identifiers.org/go/GO:0004450
    // isVersionOf: http://identifiers.org/go/GO:0005962
    var V_IDH: flux {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:13389
    var NAD: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16908
    var NADH: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_m: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_m: micromolar {pub: in};
    var H: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:36454
    // isVersionOf: http://identifiers.org/chebi/CHEBI:36453
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16087
    // isVersionOf: http://identifiers.org/go/GO:0006102
    var ISOC: millimolar {pub: in};
    var Kh_1: millimolar {init: 8.1E-5};
    var Kh_2: millimolar {init: 5.98E-5};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:36454
    // isVersionOf: http://identifiers.org/chebi/CHEBI:36453
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16087
    // isVersionOf: http://identifiers.org/go/GO:0006102
    var Km_ISOC: millimolar {init: 1.52};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var Ka_ADP: millimolar {init: 6.2E-2};
    var Ka_Ca: micromolar {init: 1.41};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:13389
    var Km_NAD: millimolar {init: 0.923};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16908
    var Ki_NADH: millimolar {init: 0.19};
    // isVersionOf: http://identifiers.org/go/GO:0004448
    // isVersionOf: http://identifiers.org/go/GO:0004449
    // isVersionOf: http://identifiers.org/go/GO:0004450
    // isVersionOf: http://identifiers.org/go/GO:0005962
    var Kcat_IDH: first_order_rate_constant {init: 1.94};
    // isVersionOf: http://identifiers.org/go/GO:0004448
    // isVersionOf: http://identifiers.org/go/GO:0004449
    // isVersionOf: http://identifiers.org/go/GO:0004450
    // isVersionOf: http://identifiers.org/go/GO:0045242
    // isVersionOf: http://identifiers.org/go/GO:0005962
    var ET_IDH: millimolar {init: 0.109};
    var ni: dimensionless {init: 1};
    V_IDH = Kcat_IDH*ET_IDH/(1.0{dimensionless}+H/Kh_1+Kh_2/H+pow(Km_ISOC/ISOC, ni)/((1.0{dimensionless}+ADP_m/Ka_ADP)*(1.0{dimensionless}+Ca_m/Ka_Ca))+Km_NAD/NAD*(1.0{dimensionless}+NADH/Ki_NADH)+pow(Km_ISOC/ISOC, ni)*(Km_NAD/NAD)*(1.0{dimensionless}+NADH/Ki_NADH)/((1.0{dimensionless}+ADP_m/Ka_ADP)*(1.0{dimensionless}+Ca_m/Ka_Ca)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005947
  def comp V_KGDH as
    // isVersionOf: http://identifiers.org/go/GO:0005947
    var V_KGDH: flux {pub: out};
    var Mg: millimolar {pub: in};
    var Ca_m: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:13389
    var NAD: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015139
    // isVersionOf: http://identifiers.org/go/GO:0015742
    var alpha_KG: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015139
    // isVersionOf: http://identifiers.org/go/GO:0015742
    var Km_alpha_KG: millimolar {init: 1.94};
    // isVersionOf: http://identifiers.org/go/GO:0005947
    var Kcat_KGDH: first_order_rate_constant {init: 0.15};
    // isVersionOf: http://identifiers.org/go/GO:0005947
    var ET_KGDH: millimolar {init: 0.5};
    var Kd_Mg: millimolar {init: 0.0308};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Kd_Ca: micromolar {init: 1.27};
    // isVersionOf: http://identifiers.org/go/GO:0015139
    // isVersionOf: http://identifiers.org/go/GO:0015742
    var n_alpha_KG: dimensionless {init: 1.2};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:13389
    var Km_NAD: millimolar {init: 38.7};
    V_KGDH = Kcat_KGDH*ET_KGDH/(1.0{dimensionless}+pow(Km_alpha_KG/alpha_KG, n_alpha_KG)/((1.0{dimensionless}+Mg/Kd_Mg)*(1.0{dimensionless}+Ca_m/Kd_Ca))+Km_NAD/NAD/((1.0{dimensionless}+Mg/Kd_Mg)*(1.0{dimensionless}+Ca_m/Kd_Ca)));
  enddef;

  // hasVersion: http://identifiers.org/go/GO:0004056
  def comp V_SL as
    // hasVersion: http://identifiers.org/go/GO:0004056
    var V_SL: flux {pub: out};
    // hasVersion: http://identifiers.org/chebi/CHEBI:15380
    var SCoA: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_m: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:51381
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30031
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30779
    var Suc: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_m: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15346
    var CoA: millimolar {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0004056
    var kf_SL: second_order_rate_constant {init: 0.127};
    // hasVersion: http://identifiers.org/go/GO:0004056
    var Ke_SL: millimolar {init: 3.115};
    V_SL = kf_SL*(SCoA*ADP_m-Suc*ATP_m*CoA/Ke_SL);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0000104
  // isVersionOf: http://identifiers.org/go/GO:0045281
  def comp V_SDH as
    // isVersionOf: http://identifiers.org/go/GO:0000104
    // isVersionOf: http://identifiers.org/go/GO:0045281
    var V_SDH: flux {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:51381
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30031
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30779
    var Suc: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:50921
    // isVersionOf: http://identifiers.org/chebi/CHEBI:37154
    // isVersionOf: http://identifiers.org/chebi/CHEBI:29806
    var FUM: millimolar {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0008483
    var OAA: millimolar {pub: in};
    var Kisdh_OAA: millimolar {init: 0.15};
    // isVersionOf: http://identifiers.org/go/GO:0000104
    // isVersionOf: http://identifiers.org/go/GO:0045281
    var Kcat_SDH: first_order_rate_constant {init: 1.0};
    // isVersionOf: http://identifiers.org/go/GO:0000104
    // isVersionOf: http://identifiers.org/go/GO:0045281
    var ET_SDH: millimolar {init: 0.5};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:51381
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30031
    // isVersionOf: http://identifiers.org/chebi/CHEBI:30779
    var Km_Suc: millimolar {init: 3.0E-2};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:50921
    // isVersionOf: http://identifiers.org/chebi/CHEBI:37154
    // isVersionOf: http://identifiers.org/chebi/CHEBI:29806
    var Ki_FUM: millimolar {init: 1.3};
    V_SDH = Kcat_SDH*ET_SDH/(1.0{dimensionless}+Km_Suc/Suc*(1.0{dimensionless}+OAA/Kisdh_OAA)*(1.0{dimensionless}+FUM/Ki_FUM));
  enddef;

  // hasVersion: http://identifiers.org/go/GO:0016615
  // hasVersion: http://identifiers.org/go/GO:0046554
  def comp V_MDH as
    // hasVersion: http://identifiers.org/go/GO:0016615
    // hasVersion: http://identifiers.org/go/GO:0046554
    var V_MDH: flux {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:50220
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15595
    var MAL: millimolar {pub: in};
    // hasVersion: http://identifiers.org/go/GO:0008483
    var OAA: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:13389
    var NAD: millimolar {pub: in};
    var H: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:50220
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15595
    var Km_MAL: millimolar {init: 1.493};
    // hasVersion: http://identifiers.org/go/GO:0016615
    // hasVersion: http://identifiers.org/go/GO:0046554
    var Kcat_MDH: first_order_rate_constant {init: 2.775E1};
    // hasVersion: http://identifiers.org/go/GO:0016615
    // hasVersion: http://identifiers.org/go/GO:0046554
    var ET_MDH: millimolar {init: 0.154};
    // hasVersion: http://identifiers.org/go/GO:0008483
    var Ki_OAA: millimolar {init: 3.1E-3};
    var fh_a: dimensionless;
    var fh_i: dimensionless;
    // isVersionOf: http://identifiers.org/chebi/CHEBI:13389
    var Km_NAD: millimolar {init: 0.2244};
    var kh1: millimolar {init: 1.13E-5};
    var kh2: millimolar {init: 26.7};
    var kh3: millimolar {init: 6.68E-9};
    var kh4: millimolar {init: 5.62E-6};
    var k_offset: dimensionless {init: 3.99E-2};
    V_MDH = Kcat_MDH*ET_MDH*fh_a*fh_i/(1.0{dimensionless}+Km_MAL/MAL*(1.0{dimensionless}+OAA/Ki_OAA)+Km_NAD/NAD+Km_MAL/MAL*(1.0{dimensionless}+OAA/Ki_OAA)*(Km_NAD/NAD));
    fh_a = 1.0{dimensionless}/(1.0{dimensionless}+H/kh1+sqr(H)/(kh1*kh2))+k_offset;
    fh_i = sqr(1.0{dimensionless}/(1.0{dimensionless}+kh3/H+kh3*kh4/sqr(H)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0004333
  def comp V_FH as
    // isVersionOf: http://identifiers.org/go/GO:0004333
    var V_FH: flux {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:50220
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15595
    var MAL: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:50921
    // isVersionOf: http://identifiers.org/chebi/CHEBI:37154
    // isVersionOf: http://identifiers.org/chebi/CHEBI:29806
    var FUM: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0004333
    var Ke_FH: dimensionless {init: 1.0};
    // isVersionOf: http://identifiers.org/go/GO:0004333
    var kf_FH: first_order_rate_constant {init: 0.83};
    V_FH = kf_FH*(FUM-MAL/Ke_FH);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0019465
  def comp V_AAT as
    // isVersionOf: http://identifiers.org/go/GO:0019465
    var V_AAT: flux {pub: out};
    // hasVersion: http://identifiers.org/go/GO:0046571
    // hasVersion: http://identifiers.org/go/GO:0047319
    // hasVersion: http://identifiers.org/go/GO:0008483
    var OAA: millimolar {pub: in};
    var GLU: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:35391
    // isVersionOf: http://identifiers.org/chebi/CHEBI:29995
    var ASP: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0015139
    // isVersionOf: http://identifiers.org/go/GO:0015742
    var alpha_KG: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0019465
    // hasVersion: http://identifiers.org/go/GO:0008483
    var Ke_AAT: dimensionless {init: 6.6};
    // isVersionOf: http://identifiers.org/go/GO:0019465
    // hasVersion: http://identifiers.org/go/GO:0008483
    var kf_AAT: second_order_rate_constant {init: 0.644};
    V_AAT = kf_AAT*(OAA*GLU-alpha_KG*ASP/Ke_AAT);
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:35391
  // isVersionOf: http://identifiers.org/chebi/CHEBI:29995
  def comp V_C_ASP as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:35391
    // isVersionOf: http://identifiers.org/chebi/CHEBI:29995
    var V_C_ASP: flux {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:35391
    // isVersionOf: http://identifiers.org/chebi/CHEBI:29995
    var ASP: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:35391
    // isVersionOf: http://identifiers.org/chebi/CHEBI:29995
    var k_C_ASP: first_order_rate_constant {init: 0.01};
    V_C_ASP = k_C_ASP*ASP;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0006119
  def comp oxidative_phosphorylation as
    var V_O2: flux {pub: out};
    var V_He: flux {pub: out};
    var V_He_F: flux {pub: out};
    var V_ATPase: flux {pub: out};
    var V_Hu: flux {pub: out};
    var V_Hleak: flux {pub: out};
    var R: volt_coulomb_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:13389
    var NAD: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16908
    var NADH: millimolar {pub: in};
    var FAD: millimolar {pub: in};
    var FADH2: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_m: millimolar {pub: in};
    var ATP_m: millimolar {pub: in};
    var Pi: millimolar {pub: in};
    var delta_psi_m: volt {pub: in};
    var rho_res: millimolar {init: 0.0006};
    var rho_res_F: millimolar {init: 0.0045};
    var ra: first_order_rate_constant {init: 6.394E-10};
    var rc1: first_order_rate_constant {init: 2.656E-19};
    var Ares: volt;
    var Ares_F: volt;
    var r1: dimensionless {init: 2.077E-18};
    var r2: dimensionless {init: 1.728E-9};
    var r3: dimensionless {init: 1.059E-26};
    var rb: first_order_rate_constant {init: 1.762E-13};
    var rc2: first_order_rate_constant {init: 8.632E-27};
    var Kres: dimensionless {init: 1.35E18};
    var Kres_F: dimensionless {init: 5.765E13};
    var gH: millimolar_per_second_volt {init: 0.01};
    var delta_psi_B: volt {init: 0.05};
    var g: dimensionless {init: 0.85};
    var delta_mu_H: volt;
    var delta_pH: dimensionless {init: -0.6};
    var rho_F1: millimolar {init: 0.06};
    var pa: first_order_rate_constant {init: 1.656E-5};
    var pc1: first_order_rate_constant {init: 9.651E-14};
    var AF1: volt;
    var p1: dimensionless {init: 1.346E-8};
    var p2: dimensionless {init: 7.739E-7};
    var p3: dimensionless {init: 6.65E-15};
    var pb: first_order_rate_constant {init: 3.373E-7};
    var pc2: first_order_rate_constant {init: 4.585E-14};
    var KF1: millimolar {init: 1.71E6};
    V_O2 = 0.5{dimensionless}*rho_res*(((ra+rc1*exp(6.0{dimensionless}*F*delta_psi_B/(R*T)))*exp(Ares*F/(R*T))-ra*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T))+rc2*exp(Ares*F/(R*T))*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T)))/((1.0{dimensionless}+r1*exp(F*Ares/(R*T)))*exp(6.0{dimensionless}*F*delta_psi_B/(R*T))+(r2+r3*exp(F*Ares/(R*T)))*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T))));
    V_He = 6.0{dimensionless}*rho_res*((ra*exp(F*Ares/(R*T))-(ra+rb)*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T)))/((1.0{dimensionless}+r1*exp(F*Ares/(R*T)))*exp(6.0{dimensionless}*F*delta_psi_B/(R*T))+(r2+r3*exp(F*Ares/(R*T)))*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T))));
    Ares = R*T/F*ln(Kres*pow(NADH/NAD, 0.5{dimensionless}));
    V_He_F = 6.0{dimensionless}*rho_res_F*((ra*exp(F*Ares_F/(R*T))-(ra+rb)*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T)))/((1.0{dimensionless}+r1*exp(F*Ares_F/(R*T)))*exp(6.0{dimensionless}*F*delta_psi_B/(R*T))+(r2+r3*exp(F*Ares_F/(R*T)))*exp(g*6.0{dimensionless}*F*delta_mu_H/(R*T))));
    Ares_F = R*T/F*ln(Kres_F*pow(FADH2/FAD, 0.5{dimensionless}));
    V_Hleak = gH*delta_mu_H;
    delta_mu_H = R*T/F*delta_pH+delta_psi_m;
    V_ATPase = -rho_F1*(((100.0{dimensionless}*pa+pc1*exp(3.0{dimensionless}*F*delta_psi_B/(R*T)))*exp(AF1*F/(R*T))-(pa*exp(3.0{dimensionless}*F*delta_mu_H/(R*T))+pc2*exp(AF1*F/(R*T))*exp(3.0{dimensionless}*F*delta_mu_H/(R*T))))/((1.0{dimensionless}+p1*exp(F*AF1/(R*T)))*exp(3.0{dimensionless}*F*delta_psi_B/(R*T))+(p2+p3*exp(F*AF1/(R*T)))*exp(3.0{dimensionless}*F*delta_mu_H/(R*T))));
    V_Hu = -3.0{dimensionless}*rho_F1*((100.0{dimensionless}*pa*(1.0{dimensionless}+exp(F*AF1/(R*T)))-(pa+pb)*exp(3.0{dimensionless}*F*delta_mu_H/(R*T)))/((1.0{dimensionless}+p1*exp(F*AF1/(R*T)))*exp(3.0{dimensionless}*F*delta_psi_B/(R*T))+(p2+p3*exp(F*AF1/(R*T)))*exp(3.0{dimensionless}*F*delta_mu_H/(R*T))));
    AF1 = R*T/F*ln(KF1*(ATP_m/(ADP_m*Pi)));
  enddef;

  def comp calcium_dynamics as
    var V_ANT: flux {pub: out};
    var V_uni: flux {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var V_NaCa: flux {pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_i: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_i: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:16761
    var ADP_m: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:15422
    var ATP_m: millimolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_i: micromolar {pub: in};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:39124
    var Ca_m: micromolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: volt_coulomb_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var delta_psi_m: volt {pub: in};
    var h: dimensionless {init: 0.5};
    var delta_psi_0: volt {init: 0.091};
    var Vmax_ANT: flux {init: 0.05};
    var L: dimensionless {init: 110.0};
    var na: dimensionless {init: 2.8};
    var Vmax_uni: flux {init: 0.000625};
    var K_act: micromolar {init: 0.38};
    var K_trans: micromolar {init: 19.0};
    var n: dimensionless {init: 3.0};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var Vmax_NaCa: flux {init: 0.005};
    var KNa: millimolar {init: 9.4};
    var KCa: micromolar {init: 3.75E-1};
    var b: dimensionless {init: 0.5};
    V_ANT = Vmax_ANT*((1.0{dimensionless}-0.05{dimensionless}*ATP_i*0.45{dimensionless}*0.8{dimensionless}*ADP_m/(0.45{dimensionless}*ADP_i*0.05{dimensionless}*ATP_m))/((1.0{dimensionless}+0.05{dimensionless}*ATP_i/(0.45{dimensionless}*ADP_i)*exp(-h*F*delta_psi_0/(R*T)))*(1.0{dimensionless}+0.45{dimensionless}*0.8{dimensionless}*ADP_m/(0.05{dimensionless}*ATP_m))));
    V_uni = Vmax_uni*(Ca_i/K_trans*pow(1.0{dimensionless}+Ca_i/K_trans, 3.0{dimensionless})*(2.0{dimensionless}*F*(delta_psi_m-delta_psi_0)/(R*T))/(pow(1.0{dimensionless}+Ca_i/K_trans, 4.0{dimensionless})+L/pow(1.0{dimensionless}+Ca_i/K_act, na)*(1.0{dimensionless}-exp(-2.0{dimensionless}*F*(delta_psi_m-delta_psi_0)/(R*T)))));
    V_NaCa = Vmax_NaCa*(exp(b*F*(delta_psi_m-delta_psi_0)/(R*T))*exp(ln(Ca_i/Ca_m))/(pow(1.0{dimensionless}+KNa/Na_i, n)*(1.0{dimensionless}+KCa/Ca_m)));
  enddef;
  def map between ADP_m and oxidative_phosphorylation for
    vars ADP_m and ADP_m;
    vars V_ATPase and V_ATPase;
  enddef;
  def map between ADP_m and calcium_dynamics for
    vars ADP_m and ADP_m;
    vars V_ANT and V_ANT;
  enddef;
  def map between ADP_m and V_SL for
    vars ADP_m and ADP_m;
    vars V_SL and V_SL;
  enddef;
  def map between NADH and oxidative_phosphorylation for
    vars NADH and NADH;
    vars V_O2 and V_O2;
  enddef;
  def map between NADH and V_IDH for
    vars NADH and NADH;
    vars V_IDH and V_IDH;
  enddef;
  def map between NADH and V_KGDH for
    vars V_KGDH and V_KGDH;
  enddef;
  def map between NADH and V_MDH for
    vars V_MDH and V_MDH;
  enddef;
  def map between ISOC and V_ACO for
    vars ISOC and ISOC;
    vars V_ACO and V_ACO;
  enddef;
  def map between ISOC and V_IDH for
    vars ISOC and ISOC;
    vars V_IDH and V_IDH;
  enddef;
  def map between alpha_KG and V_IDH for
    vars V_IDH and V_IDH;
  enddef;
  def map between alpha_KG and V_KGDH for
    vars alpha_KG and alpha_KG;
    vars V_KGDH and V_KGDH;
  enddef;
  def map between alpha_KG and V_AAT for
    vars alpha_KG and alpha_KG;
    vars V_AAT and V_AAT;
  enddef;
  def map between SCoA and V_KGDH for
    vars V_KGDH and V_KGDH;
  enddef;
  def map between SCoA and V_SL for
    vars SCoA and SCoA;
    vars V_SL and V_SL;
  enddef;
  def map between Suc and V_SL for
    vars Suc and Suc;
    vars V_SL and V_SL;
  enddef;
  def map between Suc and V_SDH for
    vars Suc and Suc;
    vars V_SDH and V_SDH;
  enddef;
  def map between FUM and V_SDH for
    vars FUM and FUM;
    vars V_SDH and V_SDH;
  enddef;
  def map between FUM and V_FH for
    vars FUM and FUM;
    vars V_FH and V_FH;
  enddef;
  def map between MAL and V_FH for
    vars MAL and MAL;
    vars V_FH and V_FH;
  enddef;
  def map between MAL and V_MDH for
    vars MAL and MAL;
    vars V_MDH and V_MDH;
  enddef;
  def map between OAA and V_MDH for
    vars OAA and OAA;
    vars V_MDH and V_MDH;
  enddef;
  def map between OAA and V_CS for
    vars OAA and OAA;
    vars V_CS and V_CS;
  enddef;
  def map between OAA and V_AAT for
    vars OAA and OAA;
    vars V_AAT and V_AAT;
  enddef;
  def map between ASP and V_AAT for
    vars ASP and ASP;
    vars V_AAT and V_AAT;
  enddef;
  def map between ASP and V_C_ASP for
    vars ASP and ASP;
    vars V_C_ASP and V_C_ASP;
  enddef;
  def map between Ca_m and calcium_dynamics for
    vars Ca_m and Ca_m;
    vars V_uni and V_uni;
    vars V_NaCa and V_NaCa;
  enddef;
  def map between AcCoA and V_CS for
    vars AcCoA and AcCoA;
  enddef;
  def map between CIT and V_ACO for
    vars CIT and CIT;
  enddef;
  def map between NAD and V_IDH for
    vars NAD and NAD;
  enddef;
  def map between H and V_IDH for
    vars H and H;
  enddef;
  def map between NAD and V_KGDH for
    vars NAD and NAD;
  enddef;
  def map between Mg and V_KGDH for
    vars Mg and Mg;
  enddef;
  def map between CoA and V_SL for
    vars CoA and CoA;
  enddef;
  def map between ATP_m and V_SL for
    vars ATP_m and ATP_m;
  enddef;
  def map between NAD and V_MDH for
    vars NAD and NAD;
  enddef;
  def map between H and V_MDH for
    vars H and H;
  enddef;
  def map between GLU and V_AAT for
    vars GLU and GLU;
  enddef;
  def map between NAD and oxidative_phosphorylation for
    vars NAD and NAD;
  enddef;
  def map between Pi and oxidative_phosphorylation for
    vars Pi and Pi;
  enddef;
  def map between FAD and oxidative_phosphorylation for
    vars FAD and FAD;
  enddef;
  def map between FADH2 and oxidative_phosphorylation for
    vars FADH2 and FADH2;
  enddef;
  def map between ATP_m and oxidative_phosphorylation for
    vars ATP_m and ATP_m;
  enddef;
  def map between ATP_i and calcium_dynamics for
    vars ATP_i and ATP_i;
  enddef;
  def map between ADP_i and calcium_dynamics for
    vars ADP_i and ADP_i;
  enddef;
  def map between ATP_m and calcium_dynamics for
    vars ATP_m and ATP_m;
  enddef;
  def map between Ca_i and calcium_dynamics for
    vars Ca_i and Ca_i;
  enddef;
  def map between Na_i and calcium_dynamics for
    vars Na_i and Na_i;
  enddef;
  def map between oxidative_phosphorylation and mitochondrial_membrane for
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta_psi_m and delta_psi_m;
    vars V_He and V_He;
    vars V_He_F and V_He_F;
    vars V_Hu and V_Hu;
    vars V_Hleak and V_Hleak;
  enddef;
  def map between calcium_dynamics and mitochondrial_membrane for
    vars R and R;
    vars T and T;
    vars F and F;
    vars delta_psi_m and delta_psi_m;
    vars V_NaCa and V_NaCa;
    vars V_uni and V_uni;
    vars V_ANT and V_ANT;
  enddef;
  def map between ADP_m and V_IDH for
    vars ADP_m and ADP_m;
  enddef;
  def map between Ca_m and V_IDH for
    vars Ca_m and Ca_m;
  enddef;
  def map between Ca_m and V_KGDH for
    vars Ca_m and Ca_m;
  enddef;
  def map between OAA and V_SDH for
    vars OAA and OAA;
  enddef;
  def map between ADP_m and ATP_m for
    vars ADP_m and ADP_m;
  enddef;
  def map between NAD and NADH for
    vars NADH and NADH;
  enddef;
  def map between CIT and ISOC for
    vars ISOC and ISOC;
  enddef;
  def map between CIT and alpha_KG for
    vars alpha_KG and alpha_KG;
  enddef;
  def map between CIT and SCoA for
    vars SCoA and SCoA;
  enddef;
  def map between CIT and Suc for
    vars Suc and Suc;
  enddef;
  def map between CIT and FUM for
    vars FUM and FUM;
  enddef;
  def map between CIT and MAL for
    vars MAL and MAL;
  enddef;
  def map between CIT and OAA for
    vars OAA and OAA;
  enddef;
  def map between ADP_m and environment for
    vars time and time;
  enddef;
  def map between ADP_i and environment for
    vars time and time;
  enddef;
  def map between NADH and environment for
    vars time and time;
  enddef;
  def map between mitochondrial_membrane and environment for
    vars time and time;
  enddef;
  def map between ISOC and environment for
    vars time and time;
  enddef;
  def map between alpha_KG and environment for
    vars time and time;
  enddef;
  def map between SCoA and environment for
    vars time and time;
  enddef;
  def map between Suc and environment for
    vars time and time;
  enddef;
  def map between FUM and environment for
    vars time and time;
  enddef;
  def map between MAL and environment for
    vars time and time;
  enddef;
  def map between OAA and environment for
    vars time and time;
  enddef;
  def map between ASP and environment for
    vars time and time;
  enddef;
  def map between Ca_m and environment for
    vars time and time;
  enddef;
  def map between Ca_i and environment for
    vars time and time;
  enddef;
enddef;
