<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :  webb_model_2002.xml

CREATED :  12th November 2007

LAST MODIFIED : 12th November 2007

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.1 Specification.

DESCRIPTION :  This file contains a CellML description of Webb, Sherratt and Fish's 2002 mathematical model of the Fas/FasL system in tumour immunology.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="webb_model_2002" name="webb_model_2002">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Cells behaving badly: a theoretical model for the Fas/FasL system in tumour immunology</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML version of the model runs in PCEnv and COR to recreate the published results shown in figure 2 of the original paper.  The units have been checked and they are consistent.  We would like to thank the author of the original model, Steven Webb, for making the original source code available to us.
          </para>
  </section>
  <sect1 id="sec_structure">
  <title>Model Structure</title>

<para>
The host immune response to a tumour can be divided into two basic, overlapping stages: the first is a phase of cell to cell recognition and interaction between the host lymphocytes and the target tumour cells, and this is followed by a stage of lymphocyte mediated killing of the tumour cells by apoptosis.  However, in an evolutionary arms race between the host immune system and the tumour, some tumour cells have developed various strategies to evade both stages of the host immune response.   
</para>

<para>
One of these strategies is for tumour cells to kill activated lymphocytes through their synthesis and secretion of the death ligand, FasL.  This ligand binds to the death receptor Fas (also known as CD95) which is expressed on the surface of the activated lymphocytes, and this interaction triggers the apoptotic pathway in the lymphocyte.  The binding of Fas and FasL can be controlled, at least in part, by the cleavage of FasL into a smaller, less cytotoxic, soluble form (sFasL) by matrix metalloproteinases (MMP).  In addition, certain cells are able to secrete sFasL by alternate splicing of Fas mRNA transcripts.  In combination, both these phenomena can lead to the down-regulation of the immune response.   
</para>

<para>
Tumour-immune cell dynamics have been the subject of several theoretical studies.  In the paper described here, Steven Webb, Jonathan Sherratt and Reginald Fish have developed a mathematical model of the Fas/FasL system to investigate Fas-FasL binding and the induction of lymphocyte apoptosis in the process of tumour-induced immunosupression.  Model simulations demonstrate how the constitutive expression of FasL by tumour cells is a potential mechanism of immune evasion, and the model predicts that sFasL can act as an inhibitor of the Fas death signal.  In addition the model considers the enzymatic cleavage of FasL into sFasL, and predicts that the inhibition of MMP cleavage activity causes Fas sensitive lymphocytes to undergo Fas-mediated apoptosis faster than the Fas-resistant tumour cells.
</para>

<para>
The model consists of a set of ordinary differential equations which represent the binding of Fas and FasL for each cell type.  
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>schematic diagram</title>
    </objectinfo>
    <imagedata fileref="webb_2002.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic representation of the interactions between FasL, soluble FasL, and Fas receptor during an immune attack against a tumour cell. Cytotoxic T-cells recognize tumour cells, and are activated to express FasL. FasL then binds to Fas on the surface of the tumour cells and induces their death through apoptosis. Some tumour cells also express FasL, and T-cells express up-regulated Fas, probably because of activation in response to tumour antigen. This enables the tumour to counterattack the cytotoxic T-cells: FasL expressed on tumour cells binds to Fas on the T-cells, which then die by apoptosis before they can attack the tumour. FasL is cleaved by a MMP to produce the soluble form sFasL. This is functional, and may bind to Fas, forming membrane-bound sFasL/Fas complexes, which are quickly internalized.</caption>
</informalfigure>

<para>
The complete original paper reference is cited below:
</para>

<para>
<ulink url="http://www.sciencedirect.com/science?_ob=ArticleURL&amp;_udi=B6VHX-46HBR2D-3&amp;_user=140507&amp;_coverDate=10%2F31%2F2002&amp;_rdoc=1&amp;_fmt=summary&amp;_orig=search&amp;_cdi=6078&amp;_sort=d&amp;_docanchor=&amp;view=c&amp;_acct=C000011498&amp;_version=1&amp;_urlVersion=0&amp;_userid=140507&amp;md5=5bc281e567eb98631e8d4077ee0c9da1">Cells behaving badly: a theoretical model for the Fas/FasL system in tumour immunology</ulink>, Steven D. Webb, Jonathan A. Sherratt and Reginald G. Fish, 2002, <ulink url="http://www.elsevier.com/wps/find/journaldescription.cws_home/505777/description#description">
            <emphasis>Mathematical Biosciences</emphasis>
          </ulink>, 179, 113-129.  (<ulink url="http://www.sciencedirect.com/science?_ob=ArticleURL&amp;_udi=B6VHX-46HBR2D-3&amp;_user=140507&amp;_coverDate=10%2F31%2F2002&amp;_rdoc=2&amp;_fmt=full&amp;_orig=browse&amp;_srch=doc-info(%23toc%236078%232002%23998209997%23334454%23FLA%23display%23Volume)&amp;_cdi=6078&amp;_sort=d&amp;_docanchor=&amp;_ct=8&amp;_acct=C000011498&amp;_version=1&amp;_urlVersion=0&amp;_userid=140507&amp;md5=d144b7646ed38c20bd1aba2736fed45b">Full text</ulink> and PDF versions of the article are available to journal subscribers on the <emphasis>Mathematical Biosciences</emphasis> website.)  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=12208611&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 12208611</ulink>
</para>

</sect1>
</article>
</documentation> 




  
  <units name="minute">
    <unit units="second" multiplier="60.0"/>
  </units>

  <units name="hour">
    <unit units="minute" multiplier="60.0"/>
  </units>

  <units base_units="yes" name="cell"/>

  <units base_units="yes" name="molecule"/>

  <units name="molecule_ml">
    <unit units="molecule"/>
    <unit units="litre" prefix="milli" exponent="-1"/>
  </units>
  
  <units name="ml2">
    <unit units="litre" prefix="milli" exponent="2"/>
  </units>
  
  <units name="ml_per_molecule_hour">
    <unit units="litre" prefix="milli"/>
    <unit units="molecule" exponent="-1"/>
    <unit units="hour" exponent="-1"/>
  </units>
  
  <units name="molecule_cell">
    <unit units="molecule"/>
    <unit units="cell" exponent="-1"/>
  </units>

  <units name="molecule_per_cell_hour">
    <unit units="molecule"/>
    <unit units="cell" exponent="-1"/>
    <unit units="hour" exponent="-1"/>
  </units>

  <units name="molecule_ml2_per_cell3_hour">
    <unit units="molecule"/>
    <unit units="litre" prefix="milli" exponent="2"/>
    <unit units="cell" exponent="-3"/>
    <unit units="hour" exponent="-1"/>
  </units>

  <units name="ml2_per_cell_molecule_hour">
    <unit units="litre" prefix="milli" exponent="2"/>
    <unit units="cell" exponent="-1"/>
    <unit units="molecule" exponent="-1"/>
    <unit units="hour" exponent="-1"/>
  </units>

  <units name="cell_per_ml_molecule2_hour">
    <unit units="cell"/>
    <unit units="litre" prefix="milli" exponent="-1"/>    
    <unit units="molecule" exponent="-2"/>
    <unit units="hour" exponent="-1"/>
  </units>

  <units name="cell_ml">
    <unit units="cell"/>
    <unit units="litre" prefix="milli" exponent="-1"/>
  </units>

  <units name="per_minute">
    <unit units="minute" exponent="-1"/>
  </units>

  <units name="per_hour">
    <unit units="hour" exponent="-1"/>
  </units>

  <units name="molar">
    <unit units="mole"/>
    <unit units="litre" exponent="-1"/>
  </units>

  <units name="per_molar_per_minute">
    <unit units="molar" exponent="-1"/>
    <unit units="minute" exponent="-1"/>
  </units>
  
  <units name="molar_ml_minute_per_molecule_hour">
    <unit units="molar"/>
    <unit units="litre" prefix="milli"/>
    <unit units="minute"/>
    <unit units="molecule" exponent="-1"/>
    <unit units="hour" exponent="-1"/>
  </units>
  
  
  <component name="environment">
    <variable units="hour" public_interface="out" name="time"/>
  </component>
  
  <component cmeta:id="T" name="T">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="T">
        <dc:title>T</dc:title>
        <dcterms:alternative>T cells</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="cell_ml" public_interface="out" name="T" initial_value="500.0"/>

    <variable units="cell_per_ml_molecule2_hour" public_interface="in" name="k1"/>
    <variable units="molecule_cell" public_interface="in" name="Lm"/>
    <variable units="molecule_cell" public_interface="in" name="RT"/>
    <variable units="cell_ml" public_interface="in" name="m"/>
    <variable units="hour" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> T </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <cn cellml:units="ml2"> 1.0 </cn>
            <ci> k1 </ci>
            <ci> m </ci>
            <ci> T </ci>
            <ci> Lm </ci>
            <ci> RT </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="LT" name="LT">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="LT">
        <dc:title>LT</dc:title>
        <dcterms:alternative>T cell Fas ligand</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="molecule_cell" public_interface="out" name="LT" initial_value="0.0"/>

    <variable units="molecule_ml2_per_cell3_hour" public_interface="in" name="k2"/>
    <variable units="per_hour" public_interface="in" name="k3"/>
    <variable units="per_hour" public_interface="in" name="k4"/>
    <variable units="ml2_per_cell_molecule_hour" public_interface="in" name="k5"/>
    <variable units="cell_ml" public_interface="in" name="m"/>
    <variable units="cell_ml" public_interface="in" name="T"/>
    <variable units="molecule_cell" public_interface="in" name="Rm"/>
    <variable units="hour" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> LT </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k2 </ci>
            <ci> T </ci>
            <ci> m </ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k3 </ci>
              <ci> LT </ci>
            </apply>
            <apply>
              <times/>
              <ci> k4 </ci>
              <ci> LT </ci>
            </apply>
            <apply>
              <times/>
              <ci> k5 </ci>
              <ci> m </ci>
              <ci> T </ci>
              <ci> LT </ci>
              <ci> Rm </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="RT" name="RT">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="RT">
        <dc:title>RT</dc:title>
        <dcterms:alternative>T cell Fas receptor</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="molecule_cell" public_interface="out" name="RT" initial_value="1E4"/>

    <variable units="molecule_per_cell_hour" public_interface="in" name="k6"/>
    <variable units="per_hour" public_interface="in" name="k7"/>
    <variable units="per_molar_per_minute" public_interface="in" name="k8"/>
    <variable units="molecule_ml" public_interface="in" name="SL"/>
    <variable units="hour" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> RT </ci> 
        </apply>
        <apply>
          <minus/>
          <ci> k6 </ci>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k7 </ci>
              <ci> RT </ci>
            </apply>
            <apply>
              <times/>
              <cn cellml:units="molar_ml_minute_per_molecule_hour"> 1.0 </cn>
	      <ci> k8 </ci>
              <ci> RT </ci>
              <ci> SL </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="m" name="m">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="m">
        <dc:title>m</dc:title>
        <dcterms:alternative>tumour cells</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF>  
    <variable units="cell_ml" public_interface="out" name="m" initial_value="500.0"/>
    
    <variable units="cell_per_ml_molecule2_hour" public_interface="in" name="k1"/>
    <variable units="molecule_cell" public_interface="in" name="LT"/>
    <variable units="molecule_cell" public_interface="in" name="Rm"/>
    <variable units="cell_ml" public_interface="in" name="T"/>
    <variable units="hour" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> m </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <cn cellml:units="ml2"> 1.0 </cn>
	    <ci> k1 </ci>
            <ci> m </ci>
            <ci> T </ci>
            <ci> LT </ci>
            <ci> Rm </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="Lm" name="Lm">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="Lm">
        <dc:title>Lm</dc:title>
        <dcterms:alternative>tumour Fas ligand</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="molecule_cell" public_interface="out" name="Lm" initial_value="1E3"/>

    <variable units="molecule_per_cell_hour" public_interface="in" name="k10"/>
    <variable units="per_hour" public_interface="in" name="k3"/>
    <variable units="per_hour" public_interface="in" name="k4"/>
    <variable units="ml2_per_cell_molecule_hour" public_interface="in" name="k5"/>
    <variable units="cell_ml" public_interface="in" name="m"/>
    <variable units="cell_ml" public_interface="in" name="T"/>
    <variable units="molecule_cell" public_interface="in" name="RT"/>
    <variable units="hour" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> Lm </ci> 
        </apply>
        <apply>
          <minus/>
          <ci> k10 </ci>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k3 </ci>
              <ci> Lm </ci>
            </apply>
            <apply>
              <times/>
              <ci> k4 </ci>
              <ci> Lm </ci>
            </apply>
            <apply>
              <times/>
              <ci> k5 </ci>
              <ci> m </ci>
              <ci> T </ci>
              <ci> Lm </ci>
              <ci> RT </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="Rm" name="Rm">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="Rm">
        <dc:title>Rm</dc:title>
        <dcterms:alternative>tumour Fas receptor</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="molecule_cell" public_interface="out" name="Rm" initial_value="1E3"/>

    <variable units="molecule_per_cell_hour" public_interface="in" name="k6"/>
    <variable units="per_hour" public_interface="in" name="k7"/>
    <variable units="per_molar_per_minute" public_interface="in" name="k8"/>
    <variable units="molecule_ml" public_interface="in" name="SL"/>
    <variable units="hour" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> Rm </ci> 
        </apply>
        <apply>
          <minus/>
          <ci> k6 </ci>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k7 </ci>
              <ci> Rm </ci>
            </apply>
            <apply>
              <times/>
              <cn cellml:units="molar_ml_minute_per_molecule_hour"> 1.0 </cn>
	      <ci> k8 </ci>
              <ci> Rm </ci>
              <ci> SL </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component cmeta:id="SL" name="SL">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="SL">
        <dc:title>SL</dc:title>
        <dcterms:alternative>soluble Fas ligand</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="molecule_ml" public_interface="out" name="SL" initial_value="0.0"/>

    <variable units="per_hour" public_interface="in" name="k11"/>
    <variable units="per_hour" public_interface="in" name="k3"/>
    <variable units="per_molar_per_minute" public_interface="in" name="k9"/>
    <variable units="cell_ml" public_interface="in" name="m"/>
    <variable units="cell_ml" public_interface="in" name="T"/>
    <variable units="molecule_cell" public_interface="in" name="Rm"/>
    <variable units="molecule_cell" public_interface="in" name="RT"/>
    <variable units="molecule_cell" public_interface="in" name="Lm"/>
    <variable units="molecule_cell" public_interface="in" name="LT"/>
    <variable units="hour" public_interface="in" name="time"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> SL </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k3 </ci>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci> Lm </ci>
                <ci> m </ci>
              </apply>
              <apply>
                <times/>
                <ci> LT </ci>
                <ci> T </ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <plus/> 
            <apply>
              <times/>
              <ci> k11 </ci>
              <ci> SL </ci>
            </apply>
            <apply>
              <times/>
              <cn cellml:units="molar_ml_minute_per_molecule_hour"> 1.0 </cn>
	      <ci> k9 </ci> 
              <apply>
                <plus/>
		<apply>
                  <times/>
                  <ci> Rm </ci>
                  <ci> m </ci>
                </apply>
                <apply>
                  <times/>
                  <ci> RT </ci>
                  <ci> T </ci>
                </apply>
              </apply>
              <ci> SL </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component name="model_parameters">
    <variable units="cell_per_ml_molecule2_hour" public_interface="out" name="k1" initial_value="8.38E-10"/>
    <variable units="molecule_ml2_per_cell3_hour" public_interface="out" name="k2" initial_value="6E-3"/>
    <variable units="per_hour" public_interface="out" name="k3" initial_value="5.9413"/>
    <variable units="per_hour" public_interface="out" name="k4" initial_value="0.35"/>
    <variable units="ml2_per_cell_molecule_hour" public_interface="out" name="k5" initial_value="2.52E-9"/>
    <variable units="molecule_per_cell_hour" public_interface="out" name="k6" initial_value="2.244E3"/>
    <variable units="per_hour" public_interface="out" name="k7" initial_value="0.35"/>
    <variable units="per_molar_per_minute" public_interface="out" name="k8" initial_value="1.92E10"/>
    <variable units="per_molar_per_minute" public_interface="out" name="k9" initial_value="87.3E8"/>
    <variable units="molecule_per_cell_hour" public_interface="out" name="k10" initial_value="3.11E3"/>
    <variable units="per_hour" public_interface="out" name="k11" initial_value="13.9"/>
  </component>
  
  <connection>
    <map_components component_2="environment" component_1="T"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="LT"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="RT"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="m"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="Lm"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="Rm"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="SL"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="Lm" component_1="T"/>
    <map_variables variable_2="T" variable_1="T"/>
    <map_variables variable_2="Lm" variable_1="Lm"/>
  </connection>

  <connection>
    <map_components component_2="RT" component_1="T"/>
    <map_variables variable_2="RT" variable_1="RT"/>
  </connection>

  <connection>
    <map_components component_2="m" component_1="T"/>
    <map_variables variable_2="m" variable_1="m"/>
    <map_variables variable_2="T" variable_1="T"/>
  </connection>   

  <connection>
    <map_components component_2="model_parameters" component_1="T"/>
    <map_variables variable_2="k1" variable_1="k1"/>
  </connection>

  <connection>
    <map_components component_2="T" component_1="LT"/>
    <map_variables variable_2="T" variable_1="T"/>
  </connection> 

  <connection>
    <map_components component_2="Rm" component_1="LT"/>
    <map_variables variable_2="Rm" variable_1="Rm"/>
  </connection>

  <connection>
    <map_components component_2="m" component_1="LT"/>
    <map_variables variable_2="LT" variable_1="LT"/>
    <map_variables variable_2="m" variable_1="m"/>
  </connection>   

  <connection>
    <map_components component_2="model_parameters" component_1="LT"/>
    <map_variables variable_2="k2" variable_1="k2"/>
    <map_variables variable_2="k3" variable_1="k3"/>
    <map_variables variable_2="k4" variable_1="k4"/>
    <map_variables variable_2="k5" variable_1="k5"/>
  </connection>

  <connection>
    <map_components component_2="SL" component_1="RT"/>
    <map_variables variable_2="SL" variable_1="SL"/>
    <map_variables variable_2="RT" variable_1="RT"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="RT"/>
    <map_variables variable_2="k6" variable_1="k6"/>
    <map_variables variable_2="k7" variable_1="k7"/>
    <map_variables variable_2="k8" variable_1="k8"/>
  </connection> 

  <connection>
    <map_components component_2="Rm" component_1="m"/>
    <map_variables variable_2="Rm" variable_1="Rm"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="m"/>
    <map_variables variable_2="k1" variable_1="k1"/>
  </connection> 

  <connection>
    <map_components component_2="RT" component_1="Lm"/>
    <map_variables variable_2="RT" variable_1="RT"/>
  </connection>

  <connection>
    <map_components component_2="m" component_1="Lm"/>
    <map_variables variable_2="m" variable_1="m"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="Lm"/>
    <map_variables variable_2="k10" variable_1="k10"/>
    <map_variables variable_2="k3" variable_1="k3"/>
    <map_variables variable_2="k4" variable_1="k4"/>
    <map_variables variable_2="k5" variable_1="k5"/>
  </connection>   

  <connection>
    <map_components component_2="Rm" component_1="SL"/>
    <map_variables variable_2="Rm" variable_1="Rm"/>
    <map_variables variable_2="SL" variable_1="SL"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="Rm"/>
    <map_variables variable_2="k6" variable_1="k6"/>
    <map_variables variable_2="k7" variable_1="k7"/>
    <map_variables variable_2="k8" variable_1="k8"/>
  </connection>

  <connection>
    <map_components component_2="model_parameters" component_1="SL"/>
    <map_variables variable_2="k3" variable_1="k3"/>
    <map_variables variable_2="k9" variable_1="k9"/>
    <map_variables variable_2="k11" variable_1="k11"/>
  </connection> 

  <connection>
    <map_components component_2="T" component_1="SL"/>
    <map_variables variable_2="T" variable_1="T"/>
  </connection> 

  <connection>
    <map_components component_2="m" component_1="SL"/>
    <map_variables variable_2="m" variable_1="m"/>
  </connection>

  <connection>
    <map_components component_2="LT" component_1="SL"/>
    <map_variables variable_2="LT" variable_1="LT"/>
  </connection> 

  <connection>
    <map_components component_2="Lm" component_1="SL"/>
    <map_variables variable_2="Lm" variable_1="Lm"/>
  </connection>

<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#cd9e0a8d-cbba-4436-a3eb-fd15134c1b31">
    <rdf:li>Fas</rdf:li>
    <rdf:li>CD95</rdf:li>
    <rdf:li>FasL</rdf:li>
    <rdf:li>cancer</rdf:li>
    <rdf:li>apoptosis</rdf:li>
    <rdf:li>tumour immunology</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#86b50aeb-0568-4adb-8de0-6979bbb63ffb">
    <rdf:li rdf:resource="rdf:#a3b88637-a8c2-48db-9fda-249153ea9bb5"/>
    <rdf:li rdf:resource="rdf:#8979fd8f-8ab3-4af5-959e-6b9779612278"/>
    <rdf:li rdf:resource="rdf:#58186096-03d5-4392-87c8-a3665bd0d150"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#dc5b9077-5660-4290-95cc-b77b8673403d">
    <bqs:Pubmed_id>12208611</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#990e65dd-4525-4a7d-828b-b3e0e0f302a4"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6301f858-0834-4593-b1a9-935da58810b4">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#cd9e0a8d-cbba-4436-a3eb-fd15134c1b31"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#83e76145-0491-44a6-878e-416e7138450d"/>
    <dcterms:created rdf:resource="rdf:#e1873a3e-e670-4981-95f1-9729677bc64f"/>
    <dc:creator rdf:resource="rdf:#1e94c441-fb95-46c3-882a-9b861cbd165d"/>
    <cmeta:modification rdf:resource="rdf:#9413edc4-c903-49ed-81b8-1565db621ea2"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#33dcd27e-70e7-4796-b780-80fe23403c23">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="#webb_model_2002">
    <dc:title>
        Webb, Sherratt and Fish's 2002 mathematical model of the Fas/FasL system in tumour immunology.
      </dc:title>
    <cmeta:comment rdf:resource="rdf:#3d8f051e-fb10-4f8a-a175-53fb4eb01cd1"/>
    <bqs:reference rdf:resource="rdf:#7d10f748-b178-4782-8045-0a004a9a581c"/>
    <bqs:reference rdf:resource="rdf:#dc5b9077-5660-4290-95cc-b77b8673403d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d05301d6-c321-4f03-a5f4-04067d462302">
    <vCard:N rdf:resource="rdf:#df333669-43da-484f-b412-814d6cd3ce8d"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d3b51c50-b5db-433a-92cc-cfa8379f57b2">
    <vCard:Given>Reginald</vCard:Given>
    <vCard:Family>Fish</vCard:Family>
    <vCard:Other>G</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a3b88637-a8c2-48db-9fda-249153ea9bb5">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#edb0abc7-2bd2-4086-a078-8921767a936a"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8979fd8f-8ab3-4af5-959e-6b9779612278">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#7bb74098-5ce5-467b-af5b-b31a554ffe60"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d88c0158-e6a1-48ae-95d2-347abc1360d7">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#58186096-03d5-4392-87c8-a3665bd0d150">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#d3b51c50-b5db-433a-92cc-cfa8379f57b2"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#07d6870b-935e-4897-9f46-a68e1c3450fe">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#990e65dd-4525-4a7d-828b-b3e0e0f302a4">
    <dc:creator rdf:resource="rdf:#86b50aeb-0568-4adb-8de0-6979bbb63ffb"/>
    <dc:title>Cells behaving badly: a theoretical model for the Fas/FasL system in tumour immunology</dc:title>
    <bqs:volume>179</bqs:volume>
    <bqs:first_page>113</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#09aa1515-590c-4dbb-ba15-6c308ccdd5c5"/>
    <dcterms:issued rdf:resource="rdf:#2ad464a3-c5f4-4545-b680-8384394cb467"/>
    <bqs:last_page>129</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#09aa1515-590c-4dbb-ba15-6c308ccdd5c5">
    <dc:title>Mathematical Biosciences</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#df333669-43da-484f-b412-814d6cd3ce8d">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>may</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1e94c441-fb95-46c3-882a-9b861cbd165d">
    <vCard:ORG rdf:resource="rdf:#07d6870b-935e-4897-9f46-a68e1c3450fe"/>
    <vCard:EMAIL rdf:resource="rdf:#d88c0158-e6a1-48ae-95d2-347abc1360d7"/>
    <vCard:N rdf:resource="rdf:#76f03452-693f-4258-96c7-c811b00f0f22"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#88a77a0a-860e-4833-bcb3-3f870d54432b">
    <dcterms:W3CDTF>2008-01-04T09:37:47+13:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2ad464a3-c5f4-4545-b680-8384394cb467">
    <dcterms:W3CDTF>2002-09</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e1873a3e-e670-4981-95f1-9729677bc64f">
    <dcterms:W3CDTF>2007-12-24T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0e07bf3a-65e2-48cb-bec9-472f6c6ad049">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7bb74098-5ce5-467b-af5b-b31a554ffe60">
    <vCard:Given>Jonathan</vCard:Given>
    <vCard:Family>Sherratt</vCard:Family>
    <vCard:Other>A</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#83e76145-0491-44a6-878e-416e7138450d">
    <dc:creator rdf:resource="rdf:#33dcd27e-70e7-4796-b780-80fe23403c23"/>
    <rdf:value>This CellML version of the model runs in PCEnv and COR to recreate the published results shown in figure 2 of the original paper.  The units have been checked and they are consistent.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#9413edc4-c903-49ed-81b8-1565db621ea2">
    <dcterms:modified rdf:resource="rdf:#88a77a0a-860e-4833-bcb3-3f870d54432b"/>
    <rdf:value>Altered some of the parameter values according to the original matlab source code provided by the model author Steven Webb.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#d05301d6-c321-4f03-a5f4-04067d462302"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#76f03452-693f-4258-96c7-c811b00f0f22">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#edb0abc7-2bd2-4086-a078-8921767a936a">
    <vCard:Given>Steven</vCard:Given>
    <vCard:Family>Webb</vCard:Family>
    <vCard:Other>D</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3d8f051e-fb10-4f8a-a175-53fb4eb01cd1">
    <dc:creator rdf:resource="rdf:#0e07bf3a-65e2-48cb-bec9-472f6c6ad049"/>
    <rdf:value>This is a CellML description of Webb, Sherratt and Fish's 2002 mathematical model of the Fas/FasL system in tumour immunology.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7d10f748-b178-4782-8045-0a004a9a581c">
    <dc:subject rdf:resource="rdf:#6301f858-0834-4593-b1a9-935da58810b4"/>
  </rdf:Description>
</rdf:RDF>
</model>