def model pasek_model_2006_surface_membrane as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millivolt2 as
    unit volt {pref: milli, expo: -2};
  enddef;
  def unit milliS as
    unit siemens {pref: milli};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit microA_per_cm2 as
    unit ampere {pref: micro};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit cm3_per_second as
    unit metre {pref: centi, expo: 3};
    unit second {expo: -1};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA as
    unit ampere {pref: micro};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_per_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar3_per_second as
    unit millimolar {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit microA_per_millimolar as
    unit microA;
    unit millimolar {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {pref: kilo, expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mole_per_coulomb as
    unit coulomb_per_mole {expo: -1};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;
  // In order to facilitate the import of this surface membrane model by the main Pasek 2008 model I will encapsulate the current model in a top component called "surface_membrane".
  //
  // Catherine Lloyd

  def comp surface_membrane as
    // surface_membrane
    //
    // top component which encapsulates the entire surface membrane model
    var Vm_s: millivolt {pub: out, priv: in};
    var i_Na_s: microA {pub: out, priv: in};
    var i_Ca_s: microA {pub: out, priv: in};
    var i_Kto_s: microA {pub: out, priv: in};
    var i_Kss_s: microA {pub: out, priv: in};
    var i_fNa_s: microA {pub: out, priv: in};
    var i_fK_s: microA {pub: out, priv: in};
    var i_K1_s: microA {pub: out, priv: in};
    var i_BNa_s: microA {pub: out, priv: in};
    var i_BK_s: microA {pub: out, priv: in};
    var i_BCa_s: microA {pub: out, priv: in};
    var i_NaK_s: microA {pub: out, priv: in};
    var i_NaCa_s: microA {pub: out, priv: in};
    var i_CaP_s: microA {pub: out, priv: in};
    var time: second {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in, priv: out};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_mole {pub: in, priv: out};
    var Na_e: millimolar {pub: in, priv: out};
    var Ca_e: millimolar {pub: in, priv: out};
    var K_e: millimolar {pub: in, priv: out};
    var Na_i: millimolar {pub: in, priv: out};
    var Ca_i: millimolar {pub: in, priv: out};
    var Ca_ss: millimolar {pub: in, priv: out};
    var K_i: millimolar {pub: in, priv: out};
    var i_circ: microA {pub: in, priv: out};
    var i_Kext: microA {pub: in, priv: out};
    var Cms: microF {pub: in, priv: out};
    var Sms: cm2 {pub: in, priv: out};
    var Smt: cm2 {pub: in, priv: out};
  enddef;
  // 1.1 connections
  def map between membrane and surface_membrane for
    vars time and time;
    vars Vm_s and Vm_s;
    vars i_circ and i_circ;
    vars i_Kext and i_Kext;
    vars Cms and Cms;
  enddef;
  def map between sodium_current and surface_membrane for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_e and Na_e;
    vars Na_i and Na_i;
    vars K_e and K_e;
    vars K_i and K_i;
    vars i_Na_s and i_Na_s;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between calcium_current and surface_membrane for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_e and Ca_e;
    vars Ca_ss and Ca_ss;
    vars i_Ca_s and i_Ca_s;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between Ca_independent_transient_outward_K_current and surface_membrane for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_e and K_e;
    vars K_i and K_i;
    vars i_Kto_s and i_Kto_s;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between steady_state_outward_K_current and surface_membrane for
    vars time and time;
    vars i_Kss_s and i_Kss_s;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between inward_rectifier and surface_membrane for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_e and K_e;
    vars i_K1_s and i_K1_s;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between hyperpolarisation_activated_current and surface_membrane for
    vars time and time;
    vars i_fNa_s and i_fNa_s;
    vars i_fK_s and i_fK_s;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between sarcolemmal_calcium_pump_current and surface_membrane for
    vars time and time;
    vars i_CaP_s and i_CaP_s;
    vars Ca_i and Ca_i;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between Na_Ca_ion_exchanger_current and surface_membrane for
    vars time and time;
    vars Na_e and Na_e;
    vars Ca_e and Ca_e;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars i_NaCa_s and i_NaCa_s;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between sodium_potassium_pump and surface_membrane for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_e and Na_e;
    vars Na_i and Na_i;
    vars K_e and K_e;
    vars i_NaK_s and i_NaK_s;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between background_currents and surface_membrane for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_e and Ca_e;
    vars i_BNa_s and i_BNa_s;
    vars i_BK_s and i_BK_s;
    vars i_BCa_s and i_BCa_s;
    vars Ca_i and Ca_i;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  // surface membrane model

  def comp membrane as
    var Vm_s: millivolt {init: -7.9709547e1, pub: out};
    var Cms: microF {pub: in};
    var i_circ: microA {pub: in};
    var i_Kext: microA {pub: in};
    var time: second {pub: in};
    var i_Na_s: microA {pub: in};
    var i_Ca_s: microA {pub: in};
    var i_Kto_s: microA {pub: in};
    var i_Kss_s: microA {pub: in};
    var i_f_s: microA {pub: in};
    var i_K1_s: microA {pub: in};
    var i_B_s: microA {pub: in};
    var i_NaK_s: microA {pub: in};
    var i_NaCa_s: microA {pub: in};
    var i_CaP_s: microA {pub: in};
    ode(Vm_s, time) = 1000{dimensionless}*((i_Kext+i_circ-(i_Na_s+i_Ca_s+i_Kto_s+i_Kss_s+i_f_s+i_K1_s+i_B_s+i_NaK_s+i_NaCa_s+i_CaP_s))/Cms);
  enddef;

  def comp sodium_current as
    var i_Na_s: microA {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: milliS_per_cm2 {init: 10.0};
    var g_Nas: milliS;
    var fNat: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_e: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_s: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_Na = R*T/F*ln(Na_e/Na_i);
    i_Na_s = g_Nas*pow(m, 3{dimensionless})*h*(Vm_s-log((Na_e+0.12{dimensionless}*K_e)/(Na_i+0.12{dimensionless}*K_i))*(R*T/F));
    g_Nas = g_Na*(Sms+Smt)*(1{dimensionless}-fNat);
  enddef;

  def comp sodium_current_m_gate as
    var m: dimensionless {init: 2.1832558e-6, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    alpha_m = 117.26{per_millivolt_second}*(Vm_s+59.3{millivolt})/(1{dimensionless}-exp(-0.55{per_millivolt}*(Vm_s+59.3{millivolt})));
    beta_m = 3800{per_second}*exp(-0.072{per_millivolt}*(Vm_s+61{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp sodium_current_h_gate as
    var h: dimensionless {init: 5.8232781e-1, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 284.4{per_second}/(1{dimensionless}+exp(0.0812{per_millivolt}*(Vm_s+115.9{millivolt})));
    beta_h = 18.77{per_millivolt_second}*(Vm_s+64.4{millivolt})/(1{dimensionless}-exp(-0.22{per_millivolt}*(Vm_s+64.4{millivolt})));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp calcium_current as
    var i_Ca_s: microA {pub: out};
    var Co: dimensionless {init: 2.5436465e-6};
    var C_cast: dimensionless {init: 9.9570063e-1};
    var C1: dimensionless {init: 9.9994546e-1};
    var C2: dimensionless {init: 9.9994546e-1};
    var tauCo: second;
    var tauC_cast: second {init: 0.009};
    var tauC1: second;
    var tauC2: second;
    var Co_inf: dimensionless;
    var C_cast_inf: dimensionless;
    var C1_inf: dimensionless;
    var C2_inf: dimensionless;
    var g_Ca: cm_per_second {init: 0.00021};
    var g_Cas: cm3_per_second;
    var fCat: dimensionless {init: 0.87};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var time: second {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm_s: millivolt {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_e: millimolar {pub: in};
    Co_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+15.3{millivolt})/(-5{millivolt})));
    tauCo = 0.00305{second}*exp(-0.0045{per_millivolt2}*sqr(Vm_s+7{millivolt}))+0.00105{second}*exp(-0.002{per_millivolt2}*sqr(Vm_s-18{millivolt}))+0.00025{second};
    ode(Co, time) = (Co_inf-Co)/tauCo;
    C1_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+26.7{millivolt})/5.4{millivolt}));
    tauC1 = 0.105{second}*exp(-sqr((Vm_s+45{millivolt})/12{millivolt}))+0.04{second}/(1{dimensionless}+exp((-Vm_s+25{millivolt})/25{millivolt}))+0.015{second}/(1{dimensionless}+exp((Vm_s+75{millivolt})/25{millivolt}))+0.0017{second};
    ode(C1, time) = (C1_inf-C1)/tauC1;
    C2_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+26.7{millivolt})/5.4{millivolt}));
    tauC2 = 0.041{second}*exp(-sqr((Vm_s+47{millivolt})/12{millivolt}))+0.08{second}/(1{dimensionless}+exp((Vm_s+55{millivolt})/(-5{millivolt})))+0.015{second}/(1{dimensionless}+exp((Vm_s+75{millivolt})/25{millivolt}))+0.0017{second};
    ode(C2, time) = (C2_inf-C2)/tauC2;
    C_cast_inf = 1{dimensionless}/(1{dimensionless}+Ca_ss/0.01{millimolar});
    ode(C_cast, time) = (C_cast_inf-C_cast)/tauC_cast;
    g_Cas = g_Ca*(Sms+Smt)*(1{dimensionless}-fCat);
    i_Ca_s = g_Cas*4{dimensionless}*(Vm_s*sqr(F)/(R*T))*((Ca_ss*exp(2{mole_per_coulomb}*Vm_s*sqr(F)/(R*T))-0.341{dimensionless}*Ca_e)/(exp(2{mole_per_coulomb}*Vm_s*sqr(F)/(R*T))-1{dimensionless}))*Co*((0.9{dimensionless}+C_cast/10.0{dimensionless})*C1+(0.1{dimensionless}+C_cast/10.0{dimensionless})*C2);
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    var i_Kto_s: microA {pub: out};
    var E_K: millivolt {pub: out};
    var a: dimensionless {init: 0.886};
    var b: dimensionless {init: 0.114};
    var g_Kto: milliS_per_cm2 {init: 0.35};
    var g_Ktos: milliS;
    var fKtot: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_s: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_e: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var r: dimensionless {priv: in};
    var s: dimensionless {priv: in};
    var s_slow: dimensionless {priv: in};
    E_K = R*T/F*ln(K_e/K_i);
    i_Kto_s = g_Ktos*r*(a*s+b*s_slow)*(Vm_s-E_K);
    g_Ktos = g_Kto*(Sms+Smt)*(1{dimensionless}-fKtot);
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var r: dimensionless {init: 2.3485072e-3, pub: out};
    var tau_r: second;
    var r_max: dimensionless;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    r_max = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+10.6{millivolt})/(-11.42{millivolt})));
    tau_r = 1{second}/(45.16{dimensionless}*exp(0.03577{per_millivolt}*(Vm_s+50{millivolt}))+98.9{dimensionless}*exp(-0.1{per_millivolt}*(Vm_s+38{millivolt})));
    ode(r, time) = (r_max-r)/tau_r;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_gate as
    var s: dimensionless {init: 9.8315843e-1, pub: out};
    var tau_s: second;
    var s_max: dimensionless;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    s_max = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+45.3{millivolt})/6.8841{millivolt}));
    tau_s = 0.35{second}*exp(-sqr(0.0666{per_millivolt}*(Vm_s+70{millivolt})))+0.035{second};
    ode(s, time) = (s_max-s)/tau_s;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_slow_gate as
    var s_slow: dimensionless {init: 6.7483370e-1, pub: out};
    var tau_s_slow: second;
    var s_slow_max: dimensionless;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    s_slow_max = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+45.3{millivolt})/6.8841{millivolt}));
    tau_s_slow = 3.7{second}*exp(-sqr(0.0333{per_millivolt}*(Vm_s+70{millivolt})))+0.035{second};
    ode(s_slow, time) = (s_slow_max-s_slow)/tau_s_slow;
  enddef;

  def comp steady_state_outward_K_current as
    var i_Kss_s: microA {pub: out};
    var g_Kss: milliS_per_cm2 {init: 0.07};
    var g_Ksss: milliS;
    var fKsst: dimensionless {init: 0.76};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_s: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var r_ss: dimensionless {priv: in};
    var s_ss: dimensionless {priv: in};
    i_Kss_s = g_Ksss*r_ss*s_ss*(Vm_s-E_K);
    g_Ksss = g_Kss*(Sms+Smt)*(1{dimensionless}-fKsst);
  enddef;

  def comp steady_state_outward_K_current_r_ss_gate as
    var r_ss: dimensionless {init: 3.1079213e-3, pub: out};
    var tau_r_ss: second;
    var r_ss_max: dimensionless;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    r_ss_max = 1{dimensionless}/(1{dimensionless}+exp(-(Vm_s+11.5{millivolt})/11.82{millivolt}));
    tau_r_ss = 10{second}/(45.16{dimensionless}*exp(0.03577{per_millivolt}*(Vm_s+50{millivolt}))+98.9{dimensionless}*exp(-0.1{per_millivolt}*(Vm_s+38{millivolt})));
    ode(r_ss, time) = (r_ss_max-r_ss)/tau_r_ss;
  enddef;

  def comp steady_state_outward_K_current_s_ss_gate as
    var s_ss: dimensionless {init: 3.0773393e-1, pub: out};
    var tau_s_ss: second;
    var s_ss_max: dimensionless;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    s_ss_max = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+87.5{millivolt})/10.3{millivolt}));
    tau_s_ss = 2.1{second};
    ode(s_ss, time) = (s_ss_max-s_ss)/tau_s_ss;
  enddef;

  def comp inward_rectifier as
    var i_K1_s: microA {pub: out};
    var g_K1: milliS_per_cm2 {init: 0.24};
    var g_K1s: milliS;
    var fK1t: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var time: second {pub: in};
    var Vm_s: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_e: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    i_K1_s = g_K1s*(Vm_s-(E_K+1.73{millivolt}))/(1{dimensionless}+exp(1.613{dimensionless}*F/(R*T)*(Vm_s-(E_K+1.73{millivolt}))))*(1{dimensionless}+exp(-(K_e-0.9988{millimolar})/0.124{millimolar}));
    g_K1s = g_K1*(Sms+Smt)*(1{dimensionless}-fK1t);
  enddef;

  def comp hyperpolarisation_activated_current as
    var i_f_s: microA {pub: out};
    var i_fNa_s: microA {pub: out};
    var i_fK_s: microA {pub: out};
    var g_f: milliS_per_cm2 {init: 0.0145};
    var g_fs: milliS;
    var fft: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var f_Na: dimensionless {init: 0.2};
    var f_K: dimensionless;
    var time: second {pub: in, priv: out};
    var Vm_s: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var y: dimensionless {priv: in};
    f_K = 1{dimensionless}-f_Na;
    i_fNa_s = g_fs*y*f_Na*(Vm_s-E_Na);
    i_fK_s = g_fs*y*f_K*(Vm_s-E_K);
    i_f_s = g_fs*y*(0.2{dimensionless}*(Vm_s-E_Na)+0.8{dimensionless}*(Vm_s-E_K));
    g_fs = g_f*(Sms+Smt)*(1{dimensionless}-fft);
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var y: dimensionless {init: 3.4357356e-3, pub: out};
    var tau_y: second;
    var y_infinity: dimensionless;
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm_s+138.6{millivolt})/10.48{millivolt}));
    tau_y = 1{second}/(0.11885{dimensionless}*exp((Vm_s+80{millivolt})/28.37{millivolt})+0.5623{dimensionless}*exp((Vm_s+80{millivolt})/(-14.19{millivolt})));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp background_currents as
    var i_B_s: microA {pub: out};
    var i_BNa_s: microA {pub: out};
    var i_BCa_s: microA {pub: out};
    var i_BK_s: microA {pub: out};
    var g_B_Ca: milliS_per_cm2 {init: 0.000648};
    var g_B_Na: milliS_per_cm2 {init: 0.0008015};
    var g_B_K: milliS_per_cm2 {init: 0.00138};
    var g_B_Cas: milliS;
    var g_B_Nas: milliS;
    var g_B_Ks: milliS;
    var fCabt: dimensionless {init: 0.56};
    var fNabt: dimensionless {init: 0.56};
    var fKbt: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var E_Ca: millivolt {init: 65};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Ca_e: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm_s: millivolt {pub: in};
    i_BNa_s = g_B_Nas*(Vm_s-E_Na);
    i_BCa_s = g_B_Cas*(Vm_s-E_Ca);
    i_BK_s = g_B_Ks*(Vm_s-E_K);
    i_B_s = i_BNa_s+i_BCa_s+i_BK_s;
    g_B_Cas = g_B_Ca*(Sms+Smt)*(1{dimensionless}-fCabt);
    g_B_Nas = g_B_Na*(Sms+Smt)*(1{dimensionless}-fNabt);
    g_B_Ks = g_B_K*(Sms+Smt)*(1{dimensionless}-fKbt);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK_s: microA {pub: out};
    var i_NaK_max: microA_per_cm2 {init: 1};
    var i_NaK_max_s: microA;
    var fNaKt: dimensionless {init: 0.59};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var K_m_K: millimolar {init: 1.5};
    var K_m_Na: millimolar {init: 10};
    var sigma: dimensionless;
    var K_e: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Vm_s: millivolt {pub: in};
    sigma = (exp(Na_e/67.3{millimolar})-1{dimensionless})/7{dimensionless};
    i_NaK_s = i_NaK_max_s/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*Vm_s*F/(R*T))+0.0365{dimensionless}*sigma*exp(-Vm_s*F/(R*T)))*K_e/(K_e+K_m_K)/(1{dimensionless}+pow(K_m_Na/Na_i, 1.5{dimensionless}));
    i_NaK_max_s = i_NaK_max*(Sms+Smt)*(1{dimensionless}-fNaKt);
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var i_CaP_s: microA {pub: out};
    var i_CaP_max: microA_per_cm2 {init: 0.85};
    var i_CaP_max_s: microA;
    var fCaPt: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    i_CaP_s = i_CaP_max_s*Ca_i/(Ca_i+0.0004{millimolar});
    i_CaP_max_s = i_CaP_max*(Sms+Smt)*(1{dimensionless}-fCaPt);
  enddef;

  def comp Na_Ca_ion_exchanger_current as
    var i_NaCa_s: microA {pub: out};
    var i_NaCa_max: microA_per_cm2 {init: 1.8e-4};
    var i_NaCa_max_s: microA;
    var fNaCat: dimensionless {init: 0.81};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_e: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_e: millimolar {pub: in};
    var Vm_s: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa_s = i_NaCa_max_s*(exp(0.0187{per_millivolt}*Vm_s)*pow(Na_i, 3{dimensionless})*Ca_e-exp(-0.0187{per_millivolt}*Vm_s)*pow(Na_e, 3{dimensionless})*Ca_i)/(1{millimolar4}+0.0001{dimensionless}*(Ca_i*pow(Na_e, 3{dimensionless})+Ca_e*pow(Na_i, 3{dimensionless})));
    i_NaCa_max_s = i_NaCa_max*(Sms+Smt)*(1{dimensionless}-fNaCat);
  enddef;

  def group as containment for
    comp membrane incl
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h_gate;
      endcomp;
      comp calcium_current;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s_gate;
        comp Ca_independent_transient_outward_K_current_s_slow_gate;
      endcomp;
      comp steady_state_outward_K_current incl
        comp steady_state_outward_K_current_r_ss_gate;
        comp steady_state_outward_K_current_s_ss_gate;
      endcomp;
      comp inward_rectifier;
      comp hyperpolarisation_activated_current incl
        comp hyperpolarisation_activated_current_y_gate;
      endcomp;
      comp background_currents;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump_current;
      comp Na_Ca_ion_exchanger_current;
    endcomp;
  enddef;

  def group as encapsulation for
    comp surface_membrane incl
      comp membrane;
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h_gate;
      endcomp;
      comp calcium_current;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s_gate;
        comp Ca_independent_transient_outward_K_current_s_slow_gate;
      endcomp;
      comp steady_state_outward_K_current incl
        comp steady_state_outward_K_current_r_ss_gate;
        comp steady_state_outward_K_current_s_ss_gate;
      endcomp;
      comp inward_rectifier;
      comp hyperpolarisation_activated_current incl
        comp hyperpolarisation_activated_current_y_gate;
      endcomp;
      comp background_currents;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump_current;
      comp Na_Ca_ion_exchanger_current;
    endcomp;
  enddef;
  def map between membrane and sodium_current for
    vars Vm_s and Vm_s;
    vars i_Na_s and i_Na_s;
  enddef;
  def map between membrane and calcium_current for
    vars Vm_s and Vm_s;
    vars i_Ca_s and i_Ca_s;
  enddef;
  def map between membrane and Ca_independent_transient_outward_K_current for
    vars Vm_s and Vm_s;
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between membrane and steady_state_outward_K_current for
    vars Vm_s and Vm_s;
    vars i_Kss_s and i_Kss_s;
  enddef;
  def map between membrane and inward_rectifier for
    vars Vm_s and Vm_s;
    vars i_K1_s and i_K1_s;
  enddef;
  def map between membrane and hyperpolarisation_activated_current for
    vars Vm_s and Vm_s;
    vars i_f_s and i_f_s;
  enddef;
  def map between membrane and background_currents for
    vars Vm_s and Vm_s;
    vars i_B_s and i_B_s;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars Vm_s and Vm_s;
    vars i_NaK_s and i_NaK_s;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_CaP_s and i_CaP_s;
  enddef;
  def map between membrane and Na_Ca_ion_exchanger_current for
    vars Vm_s and Vm_s;
    vars i_NaCa_s and i_NaCa_s;
  enddef;
  def map between sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and hyperpolarisation_activated_current for
    vars E_Na and E_Na;
  enddef;
  def map between Ca_independent_transient_outward_K_current and steady_state_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and hyperpolarisation_activated_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between sodium_current and sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_gate for
    vars s and s;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_slow_gate for
    vars s_slow and s_slow;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between steady_state_outward_K_current and steady_state_outward_K_current_r_ss_gate for
    vars r_ss and r_ss;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between steady_state_outward_K_current and steady_state_outward_K_current_s_ss_gate for
    vars s_ss and s_ss;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
  def map between hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars Vm_s and Vm_s;
  enddef;
enddef;
