def model pasek_model_2006_tubular_membrane as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millivolt2 as
    unit volt {pref: milli, expo: -2};
  enddef;
  def unit milliS as
    unit siemens {pref: milli};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit microA_per_cm2 as
    unit ampere {pref: micro};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit cm2 as
    unit metre {pref: centi, expo: 2};
  enddef;
  def unit cm_per_second as
    unit metre {pref: centi};
    unit second {expo: -1};
  enddef;
  def unit cm3_per_second as
    unit metre {pref: centi, expo: 3};
    unit second {expo: -1};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit microA as
    unit ampere {pref: micro};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_per_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar3_per_second as
    unit millimolar {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit microA_per_millimolar as
    unit microA;
    unit millimolar {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {pref: kilo, expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit mole_per_coulomb as
    unit coulomb_per_mole {expo: -1};
  enddef;
  def unit micro_litre as
    unit litre {pref: micro};
  enddef;
  // In order to facilitate the import of this tubular membrane model by the main Pasek 2008 model I will encapsulate the current model in a top component called "tubular_membrane".
  //
  // Catherine Lloyd

  def comp tubular_membrane as
    // tubular_membrane
    //
    // top component which encapsulates the entire tubular membrane model
    var Vm_t: millivolt {pub: out, priv: in};
    var i_Na_t: microA {pub: out, priv: in};
    var i_Ca_t: microA {pub: out, priv: in};
    var i_Kto_t: microA {pub: out, priv: in};
    var i_Kss_t: microA {pub: out, priv: in};
    var i_fNa_t: microA {pub: out, priv: in};
    var i_fK_t: microA {pub: out, priv: in};
    var i_K1_t: microA {pub: out, priv: in};
    var i_BNa_t: microA {pub: out, priv: in};
    var i_BK_t: microA {pub: out, priv: in};
    var i_BCa_t: microA {pub: out, priv: in};
    var i_NaK_t: microA {pub: out, priv: in};
    var i_NaCa_t: microA {pub: out, priv: in};
    var i_CaP_t: microA {pub: out, priv: in};
    var time: second {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in, priv: out};
    var T: kelvin {pub: in, priv: out};
    var F: coulomb_per_mole {pub: in, priv: out};
    var Na_t: millimolar {pub: in, priv: out};
    var Ca_t: millimolar {pub: in, priv: out};
    var K_t: millimolar {pub: in, priv: out};
    var Na_i: millimolar {pub: in, priv: out};
    var Ca_i: millimolar {pub: in, priv: out};
    var Ca_ss: millimolar {pub: in, priv: out};
    var K_i: millimolar {pub: in, priv: out};
    var i_circ: microA {pub: in, priv: out};
    var Cmt: microF {pub: in, priv: out};
    var Sms: cm2 {pub: in, priv: out};
    var Smt: cm2 {pub: in, priv: out};
  enddef;
  // 1.1 connections
  def map between membrane and tubular_membrane for
    vars time and time;
    vars Vm_t and Vm_t;
    vars i_circ and i_circ;
    vars Cmt and Cmt;
  enddef;
  def map between sodium_current and tubular_membrane for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_t and Na_t;
    vars Na_i and Na_i;
    vars K_t and K_t;
    vars K_i and K_i;
    vars i_Na_t and i_Na_t;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between calcium_current and tubular_membrane for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_t and Ca_t;
    vars Ca_ss and Ca_ss;
    vars i_Ca_t and i_Ca_t;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between Ca_independent_transient_outward_K_current and tubular_membrane for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_t and K_t;
    vars K_i and K_i;
    vars i_Kto_t and i_Kto_t;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between steady_state_outward_K_current and tubular_membrane for
    vars time and time;
    vars i_Kss_t and i_Kss_t;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between inward_rectifier and tubular_membrane for
    vars time and time;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_t and K_t;
    vars i_K1_t and i_K1_t;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between hyperpolarisation_activated_current and tubular_membrane for
    vars time and time;
    vars i_fNa_t and i_fNa_t;
    vars i_fK_t and i_fK_t;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between sarcolemmal_calcium_pump_current and tubular_membrane for
    vars time and time;
    vars i_CaP_t and i_CaP_t;
    vars Ca_i and Ca_i;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between Na_Ca_ion_exchanger_current and tubular_membrane for
    vars time and time;
    vars Na_t and Na_t;
    vars Ca_t and Ca_t;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
    vars i_NaCa_t and i_NaCa_t;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between sodium_potassium_pump and tubular_membrane for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Na_t and Na_t;
    vars Na_i and Na_i;
    vars K_t and K_t;
    vars i_NaK_t and i_NaK_t;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  def map between background_currents and tubular_membrane for
    vars R and R;
    vars T and T;
    vars F and F;
    vars Ca_t and Ca_t;
    vars i_BNa_t and i_BNa_t;
    vars i_BK_t and i_BK_t;
    vars i_BCa_t and i_BCa_t;
    vars Ca_i and Ca_i;
    vars Sms and Sms;
    vars Smt and Smt;
  enddef;
  // surface membrane model

  def comp membrane as
    var Vm_t: millivolt {init: -7.9709536e1, pub: out};
    var Cmt: microF {pub: in};
    var i_circ: microA {pub: in};
    var time: second {pub: in};
    var i_Na_t: microA {pub: in};
    var i_Ca_t: microA {pub: in};
    var i_Kto_t: microA {pub: in};
    var i_Kss_t: microA {pub: in};
    var i_f_t: microA {pub: in};
    var i_K1_t: microA {pub: in};
    var i_B_t: microA {pub: in};
    var i_NaK_t: microA {pub: in};
    var i_NaCa_t: microA {pub: in};
    var i_CaP_t: microA {pub: in};
    ode(Vm_t, time) = 1000{dimensionless}*(-(i_circ+i_Na_t+i_Ca_t+i_Kto_t+i_Kss_t+i_f_t+i_K1_t+i_B_t+i_NaK_t+i_NaCa_t+i_CaP_t)/Cmt);
  enddef;

  def comp sodium_current as
    var i_Na_t: microA {pub: out};
    var E_Na: millivolt {pub: out};
    var g_Na: milliS_per_cm2 {init: 10.0};
    var g_Nat: milliS;
    var fNat: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_t: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var K_t: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_t: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_Na = R*T/F*ln(Na_t/Na_i);
    i_Na_t = g_Nat*pow(m, 3{dimensionless})*h*(Vm_t-log((Na_t+0.12{dimensionless}*K_t)/(Na_i+0.12{dimensionless}*K_i))*(R*T/F));
    g_Nat = g_Na*(Sms+Smt)*fNat;
  enddef;

  def comp sodium_current_m_gate as
    var m: dimensionless {init: 2.1832694e-6, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    alpha_m = 117.26{per_millivolt_second}*(Vm_t+59.3{millivolt})/(1{dimensionless}-exp(-0.55{per_millivolt}*(Vm_t+59.3{millivolt})));
    beta_m = 3800{per_second}*exp(-0.072{per_millivolt}*(Vm_t+61{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp sodium_current_h_gate as
    var h: dimensionless {init: 5.8232717e-1, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 284.4{per_second}/(1{dimensionless}+exp(0.0812{per_millivolt}*(Vm_t+115.9{millivolt})));
    beta_h = 18.77{per_millivolt_second}*(Vm_t+64.4{millivolt})/(1{dimensionless}-exp(-0.22{per_millivolt}*(Vm_t+64.4{millivolt})));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp calcium_current as
    var i_Ca_t: microA {pub: out};
    var Co: dimensionless {init: 2.5436520e-6};
    var C_cast: dimensionless {init: 9.9570063e-1};
    var C1: dimensionless {init: 9.9785393e-1};
    var C2: dimensionless {init: 9.9994546e-1};
    var tauCo: second;
    var tauC_cast: second {init: 0.009};
    var tauC1: second;
    var tauC2: second;
    var Co_inf: dimensionless;
    var C_cast_inf: dimensionless;
    var C1_inf: dimensionless;
    var C2_inf: dimensionless;
    var g_Ca: cm_per_second {init: 0.00021};
    var g_Cat: cm3_per_second;
    var fCat: dimensionless {init: 0.87};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var time: second {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm_t: millivolt {pub: in};
    var Ca_ss: millimolar {pub: in};
    var Ca_t: millimolar {pub: in};
    Co_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+15.3{millivolt})/(-5{millivolt})));
    tauCo = 0.00305{second}*exp(-0.0045{per_millivolt2}*sqr(Vm_t+7{millivolt}))+0.00105{second}*exp(-0.002{per_millivolt2}*sqr(Vm_t-18{millivolt}))+0.00025{second};
    ode(Co, time) = (Co_inf-Co)/tauCo;
    C1_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+26.7{millivolt})/5.4{millivolt}));
    tauC1 = 0.105{second}*exp(-sqr((Vm_t+45{millivolt})/12{millivolt}))+0.04{second}/(1{dimensionless}+exp((-Vm_t+25{millivolt})/25{millivolt}))+0.015{second}/(1{dimensionless}+exp((Vm_t+75{millivolt})/25{millivolt}))+0.0017{second};
    ode(C1, time) = (C1_inf-C1)/tauC1;
    C2_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+26.7{millivolt})/5.4{millivolt}));
    tauC2 = 0.041{second}*exp(-sqr((Vm_t+47{millivolt})/12{millivolt}))+0.08{second}/(1{dimensionless}+exp((Vm_t+55{millivolt})/(-5{millivolt})))+0.015{second}/(1{dimensionless}+exp((Vm_t+75{millivolt})/25{millivolt}))+0.0017{second};
    ode(C2, time) = (C2_inf-C2)/tauC2;
    C_cast_inf = 1{dimensionless}/(1{dimensionless}+Ca_ss/0.01{millimolar});
    ode(C_cast, time) = (C_cast_inf-C_cast)/tauC_cast;
    g_Cat = g_Ca*(Sms+Smt)*fCat;
    i_Ca_t = g_Cat*4{dimensionless}*(Vm_t*sqr(F)/(R*T))*((Ca_ss*exp(2{mole_per_coulomb}*Vm_t*sqr(F)/(R*T))-0.341{dimensionless}*Ca_t)/(exp(2{mole_per_coulomb}*Vm_t*sqr(F)/(R*T))-1{dimensionless}))*Co*((0.9{dimensionless}+C_cast/10.0{dimensionless})*C1+(0.1{dimensionless}+C_cast/10.0{dimensionless})*C2);
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    var i_Kto_t: microA {pub: out};
    var E_K: millivolt {pub: out};
    var a: dimensionless {init: 0.886};
    var b: dimensionless {init: 0.114};
    var g_Kto: milliS_per_cm2 {init: 0.35};
    var g_Ktot: milliS;
    var fKtot: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_t: millivolt {pub: in, priv: out};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_t: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var r: dimensionless {priv: in};
    var s: dimensionless {priv: in};
    var s_slow: dimensionless {priv: in};
    E_K = R*T/F*ln(K_t/K_i);
    i_Kto_t = g_Ktot*r*(a*s+b*s_slow)*(Vm_t-E_K);
    g_Ktot = g_Kto*(Sms+Smt)*fKtot;
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var r: dimensionless {init: 2.3485094e-3, pub: out};
    var tau_r: second;
    var r_max: dimensionless;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    r_max = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+10.6{millivolt})/(-11.42{millivolt})));
    tau_r = 1{second}/(45.16{dimensionless}*exp(0.03577{per_millivolt}*(Vm_t+50{millivolt}))+98.9{dimensionless}*exp(-0.1{per_millivolt}*(Vm_t+38{millivolt})));
    ode(r, time) = (r_max-r)/tau_r;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_gate as
    var s: dimensionless {init: 9.8315865e-1, pub: out};
    var tau_t: second;
    var s_max: dimensionless;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    s_max = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+45.3{millivolt})/6.8841{millivolt}));
    tau_t = 0.35{second}*exp(-sqr(0.0666{per_millivolt}*(Vm_t+70{millivolt})))+0.035{second};
    ode(s, time) = (s_max-s)/tau_t;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_slow_gate as
    var s_slow: dimensionless {init: 6.7478532e-1, pub: out};
    var tau_s_slow: second;
    var s_slow_max: dimensionless;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    s_slow_max = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+45.3{millivolt})/6.8841{millivolt}));
    tau_s_slow = 3.7{second}*exp(-sqr(0.0333{per_millivolt}*(Vm_t+70{millivolt})))+0.035{second};
    ode(s_slow, time) = (s_slow_max-s_slow)/tau_s_slow;
  enddef;

  def comp steady_state_outward_K_current as
    var i_Kss_t: microA {pub: out};
    var g_Kss: milliS_per_cm2 {init: 0.07};
    var g_Ksst: milliS;
    var fKsst: dimensionless {init: 0.76};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var time: second {pub: in, priv: out};
    var Vm_t: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var r_ss: dimensionless {priv: in};
    var s_ss: dimensionless {priv: in};
    i_Kss_t = g_Ksst*r_ss*s_ss*(Vm_t-E_K);
    g_Ksst = g_Kss*(Sms+Smt)*fKsst;
  enddef;

  def comp steady_state_outward_K_current_r_ss_gate as
    var r_ss: dimensionless {init: 3.1079241e-3, pub: out};
    var tau_r_ss: second;
    var r_ss_max: dimensionless;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    r_ss_max = 1{dimensionless}/(1{dimensionless}+exp(-(Vm_t+11.5{millivolt})/11.82{millivolt}));
    tau_r_ss = 10{second}/(45.16{dimensionless}*exp(0.03577{per_millivolt}*(Vm_t+50{millivolt}))+98.9{dimensionless}*exp(-0.1{per_millivolt}*(Vm_t+38{millivolt})));
    ode(r_ss, time) = (r_ss_max-r_ss)/tau_r_ss;
  enddef;

  def comp steady_state_outward_K_current_s_ss_gate as
    var s_ss: dimensionless {init: 3.0773368e-1, pub: out};
    var tau_s_ss: second;
    var s_ss_max: dimensionless;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    s_ss_max = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+87.5{millivolt})/10.3{millivolt}));
    tau_s_ss = 2.1{second};
    ode(s_ss, time) = (s_ss_max-s_ss)/tau_s_ss;
  enddef;

  def comp inward_rectifier as
    var i_K1_t: microA {pub: out};
    var g_K1: milliS_per_cm2 {init: 0.24};
    var g_K1t: milliS;
    var fK1t: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var time: second {pub: in};
    var Vm_t: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_t: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    i_K1_t = g_K1t*(Vm_t-(E_K+1.73{millivolt}))/(1{dimensionless}+exp(1.613{dimensionless}*F/(R*T)*(Vm_t-(E_K+1.73{millivolt}))))*(1{dimensionless}+exp(-(K_t-0.9988{millimolar})/0.124{millimolar}));
    g_K1t = g_K1*(Sms+Smt)*fK1t;
  enddef;

  def comp hyperpolarisation_activated_current as
    var i_f_t: microA {pub: out};
    var i_fNa_t: microA {pub: out};
    var i_fK_t: microA {pub: out};
    var g_f: milliS_per_cm2 {init: 0.0145};
    var g_ft: milliS;
    var fft: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var f_Na: dimensionless {init: 0.2};
    var f_K: dimensionless;
    var time: second {pub: in, priv: out};
    var Vm_t: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    var y: dimensionless {priv: in};
    f_K = 1{dimensionless}-f_Na;
    i_fNa_t = g_ft*y*f_Na*(Vm_t-E_Na);
    i_fK_t = g_ft*y*f_K*(Vm_t-E_K);
    i_f_t = g_ft*y*(0.2{dimensionless}*(Vm_t-E_Na)+0.8{dimensionless}*(Vm_t-E_K));
    g_ft = g_f*(Sms+Smt)*fft;
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var y: dimensionless {init: 3.4357175e-3, pub: out};
    var tau_y: second;
    var y_infinity: dimensionless;
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((Vm_t+138.6{millivolt})/10.48{millivolt}));
    tau_y = 1{second}/(0.11885{dimensionless}*exp((Vm_t+80{millivolt})/28.37{millivolt})+0.5623{dimensionless}*exp((Vm_t+80{millivolt})/(-14.19{millivolt})));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp background_currents as
    var i_B_t: microA {pub: out};
    var i_BNa_t: microA {pub: out};
    var i_BCa_t: microA {pub: out};
    var i_BK_t: microA {pub: out};
    var g_B_Ca: milliS_per_cm2 {init: 0.000648};
    var g_B_Na: milliS_per_cm2 {init: 0.0008015};
    var g_B_K: milliS_per_cm2 {init: 0.00138};
    var g_B_Cat: milliS;
    var g_B_Nat: milliS;
    var g_B_Kt: milliS;
    var fCabt: dimensionless {init: 0.56};
    var fNabt: dimensionless {init: 0.56};
    var fKbt: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var E_Ca: millivolt {init: 65};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Ca_t: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Vm_t: millivolt {pub: in};
    i_BNa_t = g_B_Nat*(Vm_t-E_Na);
    i_BCa_t = g_B_Cat*(Vm_t-E_Ca);
    i_BK_t = g_B_Kt*(Vm_t-E_K);
    i_B_t = i_BNa_t+i_BCa_t+i_BK_t;
    g_B_Cat = g_B_Ca*(Sms+Smt)*fCabt;
    g_B_Nat = g_B_Na*(Sms+Smt)*fNabt;
    g_B_Kt = g_B_K*(Sms+Smt)*fKbt;
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK_t: microA {pub: out};
    var i_NaK_max: microA_per_cm2 {init: 1};
    var i_NaK_max_t: microA;
    var fNaKt: dimensionless {init: 0.59};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var K_m_K: millimolar {init: 1.5};
    var K_m_Na: millimolar {init: 10};
    var sigma: dimensionless;
    var K_t: millimolar {pub: in};
    var Na_t: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Vm_t: millivolt {pub: in};
    sigma = (exp(Na_t/67.3{millimolar})-1{dimensionless})/7{dimensionless};
    i_NaK_t = i_NaK_max_t/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*Vm_t*F/(R*T))+0.0365{dimensionless}*sigma*exp(-Vm_t*F/(R*T)))*K_t/(K_t+K_m_K)/(1{dimensionless}+pow(K_m_Na/Na_i, 1.5{dimensionless}));
    i_NaK_max_t = i_NaK_max*(Sms+Smt)*fNaKt;
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var i_CaP_t: microA {pub: out};
    var i_CaP_max: microA_per_cm2 {init: 0.85};
    var i_CaP_max_t: microA;
    var fCaPt: dimensionless {init: 0.56};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    i_CaP_t = i_CaP_max_t*Ca_i/(Ca_i+0.0004{millimolar});
    i_CaP_max_t = i_CaP_max*(Sms+Smt)*fCaPt;
  enddef;

  def comp Na_Ca_ion_exchanger_current as
    var i_NaCa_t: microA {pub: out};
    var i_NaCa_max: microA_per_cm2 {init: 1.8e-4};
    var i_NaCa_max_t: microA;
    var fNaCat: dimensionless {init: 0.81};
    var Sms: cm2 {pub: in};
    var Smt: cm2 {pub: in};
    var Na_i: millimolar {pub: in};
    var Na_t: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_t: millimolar {pub: in};
    var Vm_t: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa_t = i_NaCa_max_t*(exp(0.0187{per_millivolt}*Vm_t)*pow(Na_i, 3{dimensionless})*Ca_t-exp(-0.0187{per_millivolt}*Vm_t)*pow(Na_t, 3{dimensionless})*Ca_i)/(1{millimolar4}+0.0001{dimensionless}*(Ca_i*pow(Na_t, 3{dimensionless})+Ca_t*pow(Na_i, 3{dimensionless})));
    i_NaCa_max_t = i_NaCa_max*(Sms+Smt)*fNaCat;
  enddef;

  def group as containment for
    comp membrane incl
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h_gate;
      endcomp;
      comp calcium_current;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s_gate;
        comp Ca_independent_transient_outward_K_current_s_slow_gate;
      endcomp;
      comp steady_state_outward_K_current incl
        comp steady_state_outward_K_current_r_ss_gate;
        comp steady_state_outward_K_current_s_ss_gate;
      endcomp;
      comp inward_rectifier;
      comp hyperpolarisation_activated_current incl
        comp hyperpolarisation_activated_current_y_gate;
      endcomp;
      comp background_currents;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump_current;
      comp Na_Ca_ion_exchanger_current;
    endcomp;
  enddef;

  def group as encapsulation for
    comp tubular_membrane incl
      comp membrane;
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h_gate;
      endcomp;
      comp calcium_current;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s_gate;
        comp Ca_independent_transient_outward_K_current_s_slow_gate;
      endcomp;
      comp steady_state_outward_K_current incl
        comp steady_state_outward_K_current_r_ss_gate;
        comp steady_state_outward_K_current_s_ss_gate;
      endcomp;
      comp inward_rectifier;
      comp hyperpolarisation_activated_current incl
        comp hyperpolarisation_activated_current_y_gate;
      endcomp;
      comp background_currents;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump_current;
      comp Na_Ca_ion_exchanger_current;
    endcomp;
  enddef;
  def map between membrane and sodium_current for
    vars Vm_t and Vm_t;
    vars i_Na_t and i_Na_t;
  enddef;
  def map between membrane and calcium_current for
    vars Vm_t and Vm_t;
    vars i_Ca_t and i_Ca_t;
  enddef;
  def map between membrane and Ca_independent_transient_outward_K_current for
    vars Vm_t and Vm_t;
    vars i_Kto_t and i_Kto_t;
  enddef;
  def map between membrane and steady_state_outward_K_current for
    vars Vm_t and Vm_t;
    vars i_Kss_t and i_Kss_t;
  enddef;
  def map between membrane and inward_rectifier for
    vars Vm_t and Vm_t;
    vars i_K1_t and i_K1_t;
  enddef;
  def map between membrane and hyperpolarisation_activated_current for
    vars Vm_t and Vm_t;
    vars i_f_t and i_f_t;
  enddef;
  def map between membrane and background_currents for
    vars Vm_t and Vm_t;
    vars i_B_t and i_B_t;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars Vm_t and Vm_t;
    vars i_NaK_t and i_NaK_t;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_CaP_t and i_CaP_t;
  enddef;
  def map between membrane and Na_Ca_ion_exchanger_current for
    vars Vm_t and Vm_t;
    vars i_NaCa_t and i_NaCa_t;
  enddef;
  def map between sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and hyperpolarisation_activated_current for
    vars E_Na and E_Na;
  enddef;
  def map between Ca_independent_transient_outward_K_current and steady_state_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and hyperpolarisation_activated_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and background_currents for
    vars E_K and E_K;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between sodium_current and sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_gate for
    vars s and s;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_slow_gate for
    vars s_slow and s_slow;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between steady_state_outward_K_current and steady_state_outward_K_current_r_ss_gate for
    vars r_ss and r_ss;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between steady_state_outward_K_current and steady_state_outward_K_current_s_ss_gate for
    vars s_ss and s_ss;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
  def map between hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars Vm_t and Vm_t;
  enddef;
enddef;
