def model terkildsen_2008 as
  // Using Physiome standards to couple cellular functions for rat cardiac excitation-contraction
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // Since this is the exact same model encoding which was used to create the results presented in the paper, this CellML model is known to accurately represent the published article.
  //
  // Model Structure
  //
  // ABSTRACT: Scientific endeavour is reliant upon the extension and reuse of previous knowledge. The formalization of this process for computational modelling is facilitated by the use of accepted standards with which to describe and simulate models, ensuring consistency between the models and thus reducing the development and propagation of errors. CellML 1.1, an XML-based programming language, has been designed as a modelling standard which, by virtue of its import and grouping functions, facilitates model combination and reuse. Using CellML 1.1, we demonstrate the process of formalized model reuse by combining three separate models of rat cardiomyocyte function (an electrophysiology model, a model of cellular calcium dynamics and a mechanics model) which together make up the Pandit-Hinch-Niederer et al. cell model. Not only is this integrative model of rat electromechanics a useful tool for cardiac modelling but it is also an ideal framework with which to demonstrate both the power of model reuse and the challenges associated with this process. We highlight and classify a number of these issues associated with combining models and provide some suggested solutions.
  //
  // Using Physiome standards to couple cellular functions for rat cardiac excitation-contraction, Jonna R. Terkildsen, Steven Niederer, Edmund J. Crampin, Peter Hunter and Nicolas P. Smith, 2008, Experimental Physiology, 93, 919-929. PubMed ID: 18344258 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=18344258&query_hl=1&itool=pubmed_docsum)
  //
  // cell diagram
  //
  // A schematic diagram of the CellML model.
  //
  // A CellML 1.1 version of this model is also available, which imports components from the Pandit et al. 2001, Hinch et al. 2004 and Niederer et al. 2006 models into a parent model.
  def unit uL as
    unit litre {pref: micro};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit mSi as
    unit siemens {pref: milli};
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit um3 as
    unit meter {expo: 3, pref: micro};
  enddef;
  def unit um3_per_ms as
    unit meter {expo: 3, pref: micro};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit um3_mM_per_ms as
    unit meter {expo: 3, pref: micro};
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM_per_mV_ms as
    unit mM;
    unit second {expo: -1, pref: milli};
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_ms3 as
    unit second {expo: -3, pref: milli};
  enddef;
  def unit per_mM_ms as
    unit mM {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mJ_per_mole_K as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit N_per_mm2 as
    unit newton;
    unit metre {expo: -2, pref: milli};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp membrane as
    var V: mV {init: -78.8, pub: out};
    var R: mJ_per_mole_K {init: 8314.5, pub: out};
    var T: kelvin {init: 295, pub: out};
    var F: C_per_mole {init: 96487, pub: out};
    var time: ms {pub: in};
    var Cm: uF {init: 0.0001};
    var I_Stim: uA {pub: out};
    var stim_period: ms;
    var stim_duration: ms {init: 10};
    var stim_amplitude: uA {init: -0.6e-3};
    var I_Na: uA {pub: in};
    var I_t: uA {pub: in};
    var I_ss: uA {pub: in};
    var I_f: uA {pub: in};
    var I_K1: uA {pub: in};
    var I_B_Na: uA {pub: in};
    var I_B_K: uA {pub: in};
    var I_NaK: uA {pub: in};
    var I_LCC: uA {pub: in};
    var I_NaCa: uA {pub: in};
    var I_pCa: uA {pub: in};
    var I_CaB: uA {pub: in};
    var FVRT: dimensionless {pub: out};
    var FVRT_Ca: dimensionless {pub: out};
    stim_period = sel
      case (time >= 5000{ms}) and (time <= 10000{ms}):
        500{ms};
      otherwise:
        1000{ms};
    endsel;
    I_Stim = sel
      case (time-floor(time/stim_period)*stim_period >= 0{ms}) and (time-floor(time/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{uA};
    endsel;
    FVRT = F*V/(R*T);
    FVRT_Ca = 2{dimensionless}*FVRT;
    ode(V, time) = -(I_Na+I_t+I_ss+I_f+I_K1+I_B_Na+I_B_K+I_NaK+I_Stim+I_CaB+I_NaCa+I_pCa+I_LCC)/Cm;
  enddef;

  def comp cell_geometry as
    var V_myo: um3 {init: 25.85e3, pub: out};
    var V_SR: um3 {init: 2.098e3, pub: out};
    var V_myo_uL: uL {init: 25.85e-6, pub: out};
    var V_SR_uL: uL {init: 2.098e-6, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp pandit_sodium_current as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var i_Na: uA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var E_Na: mV {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_Na: mSi {init: 0.8e-3};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var g_Na_endo: mSi;
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var R: mJ_per_mole_K {pub: in};
    var F: C_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    g_Na_endo = 1.33{dimensionless}*g_Na;
    E_Na = R*T/F*ln(Na_o/Na_i);
    i_Na = g_Na_endo*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp sodium_current_m_gate as
    var m: dimensionless {init: 0.0054828, pub: out};
    var m_infinity: dimensionless;
    var tau_m: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45{mV})/(-6.5{mV})));
    tau_m = 1.36{ms}/(0.32{per_mV}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})))+0.08{dimensionless}*exp(-V/11{mV}));
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp sodium_current_h_gate as
    var h: dimensionless {init: 0.6095126, pub: out};
    var h_infinity: dimensionless;
    var tau_h: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+76.1{mV})/6.07{mV}));
    tau_h = sel
      case V >= -40{mV}:
        0.4537{ms}*(1{dimensionless}+exp(-(V+10.66{mV})/11.1{mV}));
      otherwise:
        3.49{ms}/(0.135{dimensionless}*exp(-(V+80{mV})/6.8{mV})+3.56{dimensionless}*exp(0.079{per_mV}*V)+310000{dimensionless}*exp(0.35{per_mV}*V));
    endsel;
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  def comp sodium_current_j_gate as
    var j: dimensionless {init: 0.60876276, pub: out};
    var j_infinity: dimensionless;
    var tau_j: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    j_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+76.1{mV})/6.07{mV}));
    tau_j = sel
      case V >= -40{mV}:
        11.63{ms}*(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV})))/exp(-0.0000002535{per_mV}*V);
      otherwise:
        3.49{ms}/((V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})))*(-127140{per_mV}*exp(0.2444{per_mV}*V)-0.00003474{per_mV}*exp(-0.04391{per_mV}*V))+0.1212{dimensionless}*exp(-0.01052{per_mV}*V)/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV}))));
    endsel;
    ode(j, time) = (j_infinity-j)/tau_j;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp pandit_Ca_independent_transient_outward_K_current as
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var i_t: uA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005250
    var E_K: mV {pub: out};
    var g_t: mSi {init: 0.035e-3};
    var g_t_endo: mSi;
    var a_endo: dimensionless {init: 0.583};
    var b_endo: dimensionless {init: 0.417};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var R: mJ_per_mole_K {pub: in};
    var F: C_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var r: dimensionless {priv: in};
    var s: dimensionless {priv: in};
    var s_slow: dimensionless {priv: in};
    g_t_endo = 0.4647{dimensionless}*g_t;
    E_K = R*T/F*ln(K_o/K_i);
    i_t = g_t_endo*r*(a_endo*s+b_endo*s_slow)*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Ca_independent_transient_outward_K_current_r_gate as
    var r: dimensionless {init: 0.002542, pub: out};
    var tau_r: ms;
    var r_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+10.6{mV})/(-11.42{mV})));
    tau_r = 1000{ms}/(45.16{dimensionless}*exp(0.03577{per_mV}*(V+50{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(V+38{mV})));
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Ca_independent_transient_outward_K_current_s_gate as
    var s: dimensionless {init: 0.8823, pub: out};
    var tau_s_endo: ms;
    var s_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    s_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45.3{mV})/6.8841{mV}));
    tau_s_endo = 550{ms}*exp(-sqr((V+70{mV})/25{mV}))+49{ms};
    ode(s, time) = (s_infinity-s)/tau_s_endo;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005250
  def comp Ca_independent_transient_outward_K_current_s_slow_gate as
    var s_slow: dimensionless {init: 0.42756, pub: out};
    var tau_s_slow_endo: ms;
    var s_slow_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    s_slow_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45.3{mV})/6.8841{mV}));
    tau_s_slow_endo = 3300{ms}*exp(-sqr((V+70{mV})/30{mV}))+49{ms};
    ode(s_slow, time) = (s_slow_infinity-s_slow)/tau_s_slow_endo;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp pandit_steady_state_outward_K_current as
    var i_ss: uA {pub: out};
    var g_ss: mSi {init: 0.007e-3};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var E_K: mV {pub: in};
    var r_ss: dimensionless {priv: in};
    var s_ss: dimensionless {priv: in};
    i_ss = g_ss*r_ss*s_ss*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp steady_state_outward_K_current_r_ss_gate as
    var r_ss: dimensionless {init: 0.0033545, pub: out};
    var tau_r_ss: ms;
    var r_ss_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    r_ss_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+11.5{mV})/(-11.82{mV})));
    tau_r_ss = 10000{ms}/(45.16{dimensionless}*exp(0.03577{per_mV}*(V+50{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(V+38{mV})));
    ode(r_ss, time) = (r_ss_infinity-r_ss)/tau_r_ss;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  def comp steady_state_outward_K_current_s_ss_gate as
    var s_ss: dimensionless {init: 0.266596, pub: out};
    var tau_s_ss: ms;
    var s_ss_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    s_ss_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+87.5{mV})/10.3{mV}));
    tau_s_ss = 2100{ms};
    ode(s_ss, time) = (s_ss_infinity-s_ss)/tau_s_ss;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005242
  // isVersionOf: http://identifiers.org/go/GO:0005241
  def comp pandit_inward_rectifier as
    var i_K1: uA {pub: out};
    var g_K1: mSi {init: 0.024e-3};
    var V: mV {pub: in};
    var R: mJ_per_mole_K {pub: in};
    var F: C_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var E_K: mV {pub: in};
    i_K1 = (48e-3{uA}/(exp((V+37{mV})/25{mV})+exp((V+37{mV})/(-25{mV})))+10e-3{uA})*(0.001{dimensionless}/(1{dimensionless}+exp((V-(E_K+76.77{mV}))/(-17{mV}))))+g_K1*(V-(E_K+1.73{mV}))/((1{dimensionless}+exp(1.613{dimensionless}*F*(V-(E_K+1.73{mV}))/(R*T)))*(1{dimensionless}+exp((K_o-0.9988{mM})/(-0.124{mM}))));
  enddef;

  def comp pandit_hyperpolarisation_activated_current as
    var i_f: uA {pub: out};
    var i_f_Na: uA {pub: out};
    var i_f_K: uA {pub: out};
    var g_f: mSi {init: 0.00145e-3};
    var f_Na: dimensionless {init: 0.2};
    var f_K: dimensionless;
    var V: mV {priv: out, pub: in};
    var E_K: mV {pub: in};
    var E_Na: mV {pub: in};
    var time: ms {priv: out, pub: in};
    var y: dimensionless {priv: in};
    f_K = 1{dimensionless}-f_Na;
    i_f_Na = g_f*y*f_Na*(V-E_Na);
    i_f_K = g_f*y*f_K*(V-E_K);
    i_f = i_f_Na+i_f_K;
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var y: dimensionless {init: 0.0026369, pub: out};
    var tau_y: ms;
    var y_infinity: dimensionless;
    var V: mV {pub: in};
    var time: ms {pub: in};
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+138.6{mV})/10.48{mV}));
    tau_y = 1000{ms}/(0.11885{dimensionless}*exp((V+80{mV})/28.37{mV})+0.5623{dimensionless}*exp((V+80{mV})/(-14.19{mV})));
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0022840
  def comp pandit_background_currents as
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var i_B_Na: uA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var i_B_K: uA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var g_B_Na: mSi {init: 0.00008015e-3};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var g_B_K: mSi {init: 0.000138e-3};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    var E_Na: mV {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    i_B_Na = g_B_Na*(V-E_Na);
    i_B_K = g_B_K*(V-E_K);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005391
  // isVersionOf: http://identifiers.org/go/GO:0005890
  // isVersionOf: http://identifiers.org/go/GO:0006815
  def comp pandit_sodium_potassium_pump as
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK: uA {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var i_NaK_max: uA {init: 0.95e-4};
    var K_m_K: mM {init: 1.5};
    var K_m_Na: mM {init: 10};
    var sigma: dimensionless;
    var K_o: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var R: mJ_per_mole_K {pub: in};
    var F: C_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    sigma = (exp(Na_o/67.3{mM})-1{dimensionless})/7{dimensionless};
    i_NaK = i_NaK_max*1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)))*K_o/(K_o+K_m_K)*1{dimensionless}/(1{dimensionless}+pow(K_m_Na/Na_i, 4{dimensionless}));
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
  // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
  // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
  def comp pandit_standard_ionic_concentrations as
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26708
    var Na_o: mM {init: 140, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
    var Ca_o: mM {init: 1.2, pub: out};
    // isVersionOf: http://identifiers.org/chebi/CHEBI:26216
    var K_o: mM {init: 5.4, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp hinch_CaRU as
    var g_D: um3_per_ms {init: 0.065, priv: out};
    var J_R: um3_per_ms {init: 0.02, priv: out};
    var J_L: um3_per_ms {init: 9.13e-4, priv: out};
    var V_myo: um3 {priv: out, pub: in};
    var N: dimensionless {init: 50000, priv: out};
    var V: mV {priv: out, pub: in};
    var Ca_i: mM {priv: out, pub: in};
    var Ca_o: mM {priv: out, pub: in};
    var Ca_SR: mM {priv: out, pub: in};
    var time: ms {priv: out, pub: in};
    var FVRT_Ca: dimensionless {priv: out, pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    // isVersionOf: http://identifiers.org/go/GO:0005219
    var I_RyR: mM_per_ms {priv: in, pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_LCC: mM_per_ms {priv: in, pub: out};
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp CaRU_Transitions as
    var V: mV {pub: in};
    var C_oc: mM {pub: in};
    var C_co: mM {pub: in};
    var Ca_i: mM {pub: in};
    var V_L: mV {init: -2};
    var del_VL: mV {init: 7};
    var phi_L: dimensionless {init: 2.35};
    var t_L: ms {init: 1};
    var tau_L: ms {init: 650};
    var t_R: ms;
    var tau_R: ms {init: 2.43};
    var phi_R: dimensionless {init: 0.05};
    var theta_R: dimensionless {init: 0.012};
    var K_RyR: mM {init: 41e-3};
    var K_L: mM {init: 0.22e-3};
    var a: dimensionless {init: 0.0625};
    var b: dimensionless {init: 14};
    var c: dimensionless {init: 0.01};
    var d: dimensionless {init: 100};
    var expVL: dimensionless;
    var alpha_p: per_ms {pub: out};
    var alpha_m: per_ms {pub: out};
    var beta_poc: per_ms {pub: out};
    var beta_pcc: per_ms {pub: out};
    var beta_m: per_ms {pub: out};
    var epsilon_pco: per_ms {pub: out};
    var epsilon_pcc: per_ms {pub: out};
    var epsilon_m: per_ms {pub: out};
    var mu_poc: per_ms {pub: out};
    var mu_pcc: per_ms {pub: out};
    var mu_moc: per_ms {pub: out};
    var mu_mcc: per_ms {pub: out};
    expVL = exp((V-V_L)/del_VL);
    t_R = 1.17{dimensionless}*t_L;
    alpha_p = expVL/(t_L*(expVL+1{dimensionless}));
    alpha_m = phi_L/t_L;
    beta_poc = sqr(C_oc)/(t_R*(sqr(C_oc)+sqr(K_RyR)));
    beta_pcc = sqr(Ca_i)/(t_R*(sqr(Ca_i)+sqr(K_RyR)));
    beta_m = phi_R/t_R;
    epsilon_pco = C_co*(expVL+a)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_pcc = Ca_i*(expVL+a)/(tau_L*K_L*(expVL+1{dimensionless}));
    epsilon_m = b*(expVL+a)/(tau_L*(b*expVL+a));
    mu_poc = (sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(sqr(C_oc)+sqr(K_RyR)));
    mu_pcc = (sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(sqr(Ca_i)+sqr(K_RyR)));
    mu_moc = theta_R*d*(sqr(C_oc)+c*sqr(K_RyR))/(tau_R*(d*sqr(C_oc)+c*sqr(K_RyR)));
    mu_mcc = theta_R*d*(sqr(Ca_i)+c*sqr(K_RyR))/(tau_R*(d*sqr(Ca_i)+c*sqr(K_RyR)));
  enddef;

  // isVersionOf: http://identifiers.org/chebi/CHEBI:22984
  def comp DS_Calcium_Concentrations as
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FVRT_Ca: dimensionless {pub: in};
    var g_D: um3_per_ms {pub: in};
    var J_R: um3_per_ms {pub: in};
    var J_L: um3_per_ms {pub: in};
    var C_cc: mM {pub: out};
    var C_oc: mM {pub: out};
    var C_co: mM {pub: out};
    var C_oo: mM {pub: out};
    C_cc = Ca_i;
    C_co = (Ca_i+J_R/g_D*Ca_SR)/(1{dimensionless}+J_R/g_D);
    C_oc = sel
      case abs(FVRT_Ca) > 0.000000001{dimensionless}:
        (Ca_i+J_L/g_D*Ca_o*FVRT_Ca*exp(-FVRT_Ca)/(1{dimensionless}-exp(-FVRT_Ca)))/(1{dimensionless}+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        (Ca_i+J_L/g_D*Ca_o)/(1{dimensionless}+J_L/g_D);
    endsel;
    C_oo = sel
      case abs(FVRT_Ca) > 0.000000001{dimensionless}:
        (Ca_i+J_R/g_D*Ca_SR+J_L/g_D*Ca_o*FVRT_Ca*exp(-FVRT_Ca)/(1{dimensionless}-exp(-FVRT_Ca)))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        (Ca_i+J_R/g_D*Ca_SR+J_L/g_D*Ca_o)/(1{dimensionless}+J_R/g_D+J_L/g_D);
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005219
  // isVersionOf: http://identifiers.org/chebi/CHEBI:38215
  def comp LCC_and_RyR_fluxes as
    var g_D: um3_per_ms {pub: in};
    var J_R: um3_per_ms {pub: in};
    var J_L: um3_per_ms {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var Ca_o: mM {pub: in};
    var FVRT_Ca: dimensionless {pub: in};
    var J_Loo: um3_mM_per_ms {pub: out};
    var J_Loc: um3_mM_per_ms {pub: out};
    var J_Rco: um3_mM_per_ms {pub: out};
    var J_Roo: um3_mM_per_ms {pub: out};
    J_Rco = J_R*(Ca_SR-Ca_i)/(1{dimensionless}+J_R/g_D);
    J_Roo = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_R*(Ca_SR-Ca_i+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_SR-Ca_o*exp(-FVRT_Ca)))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_R*(Ca_SR-Ca_i+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_SR-Ca_o*exp(-0.00001{dimensionless})))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loc = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_L*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i)/(1{dimensionless}+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca)));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_o*exp(-0.00001{dimensionless})-Ca_i)/(1{dimensionless}+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
    J_Loo = sel
      case abs(FVRT_Ca) > 0.00001{dimensionless}:
        J_L*FVRT_Ca/(1{dimensionless}-exp(-FVRT_Ca))*(Ca_o*exp(-FVRT_Ca)-Ca_i+J_R/g_D*(Ca_o*exp(-FVRT_Ca)-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*FVRT_Ca/(1{dimensionless}-exp(FVRT_Ca)));
      otherwise:
        J_L*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless}))*(Ca_o*exp(-0.00001{dimensionless})-Ca_i+J_R/g_D*(Ca_o*exp(-0.00001{dimensionless})-Ca_SR))/(1{dimensionless}+J_R/g_D+J_L/g_D*0.00001{dimensionless}/(1{dimensionless}-exp(-0.00001{dimensionless})));
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp CaRU_states as
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_poc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var denom: per_ms3;
    var y_oc: dimensionless {pub: out};
    var y_co: dimensionless {pub: out};
    var y_oo: dimensionless {pub: out};
    var y_cc: dimensionless {pub: out};
    var y_ci: dimensionless {pub: out};
    var y_oi: dimensionless {pub: out};
    var y_ic: dimensionless {pub: out};
    var y_io: dimensionless {pub: out};
    var y_ii: dimensionless {pub: out};
    denom = (alpha_p+alpha_m)*((alpha_m+beta_m+beta_poc)*(beta_m+beta_pcc)+alpha_p*(beta_m+beta_poc));
    y_oc = alpha_p*beta_m*(alpha_p+alpha_m+beta_m+beta_pcc)/denom;
    y_co = alpha_m*(beta_pcc*(alpha_m+beta_m+beta_poc)+beta_poc*alpha_p)/denom;
    y_oo = alpha_p*(beta_poc*(alpha_p+beta_m+beta_pcc)+beta_pcc*alpha_m)/denom;
    y_cc = alpha_m*beta_m*(alpha_m+alpha_p+beta_m+beta_poc)/denom;
    y_ci = alpha_m/(alpha_p+alpha_m);
    y_oi = alpha_p/(alpha_p+alpha_m);
    y_ic = beta_m/(beta_pcc+beta_m);
    y_io = beta_pcc/(beta_pcc+beta_m);
    y_ii = 1{dimensionless}-y_oc-y_co-y_oo-y_cc-y_ci-y_ic-y_oi-y_io;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp CaRU_reduced_states as
    var y_oc: dimensionless {pub: in};
    var y_cc: dimensionless {pub: in};
    var y_co: dimensionless {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var epsilon_pco: per_ms {pub: in};
    var epsilon_pcc: per_ms {pub: in};
    var epsilon_m: per_ms {pub: in};
    var mu_poc: per_ms {pub: in};
    var mu_pcc: per_ms {pub: in};
    var mu_moc: per_ms {pub: in};
    var mu_mcc: per_ms {pub: in};
    var r_1: per_ms {pub: out};
    var r_2: per_ms {pub: out};
    var r_3: per_ms {pub: out};
    var r_4: per_ms {pub: out};
    var r_5: per_ms {pub: out};
    var r_6: per_ms {pub: out};
    var r_7: per_ms {pub: out};
    var r_8: per_ms {pub: out};
    var z_1: dimensionless {init: 0.98794, pub: out};
    var z_2: dimensionless {init: 0.00887, pub: out};
    var z_3: dimensionless {init: 0.003156, pub: out};
    var z_4: dimensionless {pub: out};
    var time: ms {pub: in};
    r_1 = y_oc*mu_poc+y_cc*mu_pcc;
    r_2 = (alpha_p*mu_moc+alpha_m*mu_mcc)/(alpha_p+alpha_m);
    r_3 = beta_m*mu_pcc/(beta_m+beta_pcc);
    r_4 = mu_mcc;
    r_5 = y_co*epsilon_pco+y_cc*epsilon_pcc;
    r_6 = epsilon_m;
    r_7 = alpha_m*epsilon_pcc/(alpha_p+alpha_m);
    r_8 = epsilon_m;
    z_4 = 1{dimensionless}-z_1-z_2-z_3;
    ode(z_1, time) = -(r_1+r_5)*z_1+r_2*z_2+r_6*z_3;
    ode(z_2, time) = r_1*z_1-(r_2+r_7)*z_2+r_8*z_4;
    ode(z_3, time) = r_5*z_1-(r_6+r_3)*z_3+r_4*z_4;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp RyR_current as
    var y_oo: dimensionless {pub: in};
    var y_co: dimensionless {pub: in};
    var y_oc: dimensionless {pub: in};
    var beta_pcc: per_ms {pub: in};
    var beta_m: per_ms {pub: in};
    var J_Roo: um3_mM_per_ms {pub: in};
    var J_Rco: um3_mM_per_ms {pub: in};
    var z_1: dimensionless {pub: in};
    var z_3: dimensionless {pub: in};
    var V_myo: um3 {pub: in};
    var N: dimensionless {pub: in};
    var J_R1: um3_mM_per_ms {pub: out};
    var J_R3: um3_mM_per_ms {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    // isVersionOf: http://identifiers.org/go/GO:0005219
    var I_RyR: mM_per_ms {pub: out};
    J_R1 = y_oo*J_Roo+J_Rco*y_co;
    J_R3 = J_Rco*beta_pcc/(beta_m+beta_pcc);
    I_RyR = (z_1*J_R1+z_3*J_R3)*N/V_myo;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  def comp LCC_current as
    var y_oo: dimensionless {pub: in};
    var y_oc: dimensionless {pub: in};
    var alpha_p: per_ms {pub: in};
    var alpha_m: per_ms {pub: in};
    var J_Loo: um3_mM_per_ms {pub: in};
    var J_Loc: um3_mM_per_ms {pub: in};
    var z_1: dimensionless {pub: in};
    var z_2: dimensionless {pub: in};
    var V_myo: um3 {pub: in};
    var N: dimensionless {pub: in};
    var J_L1: um3_mM_per_ms {pub: out};
    var J_L2: um3_mM_per_ms {pub: out};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_LCC: mM_per_ms {pub: out};
    J_L1 = J_Loo*y_oo+J_Loc*y_oc;
    J_L2 = J_Loc*alpha_p/(alpha_p+alpha_m);
    I_LCC = (z_1*J_L1+z_2*J_L2)*N/V_myo;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0030181
  def comp hinch_Na_Ca_Exchanger as
    var FVRT: dimensionless {pub: in};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1380e-3};
    var eta: dimensionless {init: 0.35};
    var k_sat: dimensionless {init: 0.1};
    var g_NCX: mM_per_ms {init: 38.5e-3};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var I_NaCa: mM_per_ms {pub: out};
    I_NaCa = g_NCX*(exp(eta*FVRT)*pow(Na_i, 3{dimensionless})*Ca_o-exp((eta-1{dimensionless})*FVRT)*pow(Na_o, 3{dimensionless})*Ca_i)/((pow(Na_o, 3{dimensionless})+pow(K_mNa, 3{dimensionless}))*(Ca_o+K_mCa)*(1{dimensionless}+k_sat*exp((eta-1{dimensionless})*FVRT)));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/go/GO:0051208
  // isVersionOf: http://identifiers.org/go/GO:0005388
  // isVersionOf: http://identifiers.org/go/GO:0030899
  def comp hinch_SERCA as
    var g_SERCA: mM_per_ms {init: 0.45e-3};
    var K_SERCA: mM {init: 0.5e-3};
    var I_SERCA: mM_per_ms {pub: out};
    var Ca_i: mM {pub: in};
    I_SERCA = g_SERCA*sqr(Ca_i)/(sqr(K_SERCA)+sqr(Ca_i));
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0060402
  // isVersionOf: http://identifiers.org/go/GO:0006816
  // isVersionOf: http://identifiers.org/go/GO:0015085
  def comp hinch_Sarcolemmal_Ca_pump as
    // isVersionOf: http://identifiers.org/go/GO:0060402
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0070588
    var g_pCa: mM_per_ms {init: 0.0035e-3};
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0015085
    // isVersionOf: http://identifiers.org/go/GO:0070588
    var K_mpCa: mM {init: 0.5e-3};
    // isVersionOf: http://identifiers.org/go/GO:0060402
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0015085
    var Ca_i: mM {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0060402
    // isVersionOf: http://identifiers.org/go/GO:0006816
    // isVersionOf: http://identifiers.org/go/GO:0015085
    var I_pCa: mM_per_ms {pub: out};
    I_pCa = g_pCa*Ca_i/(K_mpCa+Ca_i);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  def comp hinch_Background_Ca_current as
    var V: mV {pub: in};
    var R: mJ_per_mole_K {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mole {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var E_Ca: mV {pub: out};
    var g_CaB: mM_per_mV_ms {init: 2.6875e-8};
    var I_CaB: mM_per_ms {pub: out};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    I_CaB = g_CaB*(E_Ca-V);
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0022840
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  def comp hinch_SR_Ca_leak_current as
    var Ca_i: mM {pub: in};
    var Ca_SR: mM {pub: in};
    var g_SRl: per_ms {init: 1.8951e-5};
    var I_SR: mM_per_ms {pub: out};
    I_SR = g_SRl*(Ca_SR-Ca_i);
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:62343
  def comp hinch_calmodulin_Ca_buffer as
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var k_CMDN: mM {init: 2.382e-3};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var B_CMDN: mM {init: 50e-3};
    var Ca_i: mM {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62343
    var beta_CMDN: dimensionless {pub: out};
    beta_CMDN = pow(1{dimensionless}+k_CMDN*B_CMDN/sqr(k_CMDN+Ca_i), -1{dimensionless});
  enddef;

  def comp convert_hinch as
    var F: C_per_mole {pub: in};
    var V_myo_uL: uL {pub: in};
    var hinch_I_LCC: mM_per_ms {pub: in};
    var hinch_I_NaCa: mM_per_ms {pub: in};
    var hinch_I_pCa: mM_per_ms {pub: in};
    var hinch_I_CaB: mM_per_ms {pub: in};
    var hinch_I_RyR: mM_per_ms {pub: in};
    var I_LCC: uA {pub: out};
    var I_NaCa: uA {pub: out};
    var I_pCa: uA {pub: out};
    var I_CaB: uA {pub: out};
    var I_RyR: mM_per_ms {pub: out};
    I_LCC = -1.5{dimensionless}*hinch_I_LCC*2{dimensionless}*V_myo_uL*F;
    I_NaCa = hinch_I_NaCa*V_myo_uL*F;
    I_pCa = hinch_I_pCa*2{dimensionless}*V_myo_uL*F;
    I_CaB = -hinch_I_CaB*2{dimensionless}*V_myo_uL*F;
    I_RyR = 1.5{dimensionless}*hinch_I_RyR;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:63850
  def comp niederer_thinfilaments as
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:67896
  def comp niederer_tropomyosin as
    var z: dimensionless {init: 0.020023, pub: out};
    var z_max: dimensionless {pub: out};
    var time: ms {pub: in};
    var k_on: per_mM_ms {pub: in};
    var k_Ref_off: per_ms {pub: in};
    var gamma_trpn: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var Ca_TRPN_Max: mM {pub: in};
    var alpha_0: per_ms {init: 8e-3};
    var alpha_r1: per_ms {init: 2e-3};
    var alpha_r2: per_ms {init: 1.75e-3};
    var n_Rel: dimensionless {init: 3};
    var K_z: dimensionless {init: 0.15};
    var n_Hill: dimensionless {init: 3};
    var Ca_50ref: mM {init: 1.05e-3};
    var z_p: dimensionless {init: 0.85};
    var beta_1: dimensionless {init: -4};
    var Ca_50: mM;
    var Ca_TRPN_50: mM;
    var K_2: per_ms;
    var K_1: per_ms;
    var alpha_Tm: per_ms;
    var beta_Tm: per_ms;
    var beta_0: dimensionless {pub: in};
    var Ca_b: mM {pub: in};
    var lambda: dimensionless {pub: in};
    K_2 = alpha_r2*pow(z_p, n_Rel)/(pow(z_p, n_Rel)+pow(K_z, n_Rel))*(1{dimensionless}-n_Rel*pow(K_z, n_Rel)/(pow(z_p, n_Rel)+pow(K_z, n_Rel)));
    K_1 = alpha_r2*pow(z_p, n_Rel-1{dimensionless})*n_Rel*pow(K_z, n_Rel)/sqr(pow(z_p, n_Rel)+pow(K_z, n_Rel));
    z_max = (alpha_0/pow(Ca_TRPN_50/Ca_TRPN_Max, n_Hill)-K_2)/(alpha_r1+K_1+alpha_0/pow(Ca_TRPN_50/Ca_TRPN_Max, n_Hill));
    Ca_50 = Ca_50ref*(1{dimensionless}+beta_1*(lambda-1{dimensionless}));
    Ca_TRPN_50 = Ca_50*Ca_TRPN_Max/(Ca_50+k_Ref_off/k_on*(1{dimensionless}-(1{dimensionless}+beta_0*(lambda-1{dimensionless}))*0.5{dimensionless}/gamma_trpn));
    alpha_Tm = alpha_0*pow(Ca_b/Ca_TRPN_50, n_Hill);
    beta_Tm = alpha_r1+alpha_r2*pow(z, n_Rel-1{dimensionless})/(pow(z, n_Rel)+pow(K_z, n_Rel));
    ode(z, time) = alpha_Tm*(1{dimensionless}-z)-beta_Tm*z;
  enddef;

  def comp niederer_troponin as
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var I_TRPN: mM_per_ms {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var Ca_TRPN_Max: mM {init: 70e-3, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var TRPN: mM {pub: in};
    var Ca_i: mM {pub: in};
    var k_off: per_ms;
    var k_on: per_mM_ms {init: 100, pub: out};
    var k_Ref_off: per_ms {init: 0.2, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var gamma_trpn: dimensionless {init: 2, pub: out};
    var Tension: N_per_mm2 {pub: in};
    var T_ref: N_per_mm2 {pub: in};
    k_off = sel
      case 1{dimensionless}-Tension/(gamma_trpn*T_ref) > 0.1{dimensionless}:
        k_Ref_off*(1{dimensionless}-Tension/(gamma_trpn*T_ref));
      otherwise:
        k_Ref_off*0.1{dimensionless};
    endsel;
    I_TRPN = (Ca_TRPN_Max-TRPN)*k_off-Ca_i*TRPN*k_on;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:67897
  // isVersionOf: http://identifiers.org/fma/FMA:62334
  // isVersionOf: http://identifiers.org/fma/FMA:62333
  def comp niederer_Myofilaments as
    var time: ms {pub: in};
    var lambda: dimensionless {pub: out};
    var ExtensionRatio: dimensionless {pub: out};
    var dExtensionRatiodt: per_ms {pub: out};
    var lambda_prev: dimensionless {pub: out};
    ExtensionRatio = sel
      case time > 3e5{ms}:
        1{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    lambda_prev = ExtensionRatio;
    dExtensionRatiodt = 0{per_ms};
    lambda = sel
      case (ExtensionRatio > 0.8{dimensionless}) and (ExtensionRatio <= 1.15{dimensionless}):
        ExtensionRatio;
      case ExtensionRatio > 1.15{dimensionless}:
        1.15{dimensionless};
      otherwise:
        0.8{dimensionless};
    endsel;
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:67897
  def comp niederer_filament_overlap as
    var lambda: dimensionless {pub: in};
    var overlap: dimensionless {pub: out};
    var beta_0: dimensionless {init: 4.9, pub: out};
    overlap = 1{dimensionless}+beta_0*(lambda-1{dimensionless});
  enddef;

  // isVersionOf: http://identifiers.org/fma/FMA:67897
  def comp niederer_length_independent_tension as
    var T_ref: N_per_mm2 {init: 56.2, pub: out};
    var T_Base: N_per_mm2 {pub: out};
    var z: dimensionless {pub: in};
    var z_max: dimensionless {pub: in};
    T_Base = T_ref*z/z_max;
  enddef;

  def comp niederer_isometric_tension as
    var T_0: N_per_mm2 {pub: out};
    var T_Base: N_per_mm2 {pub: in};
    var overlap: dimensionless {pub: in};
    T_0 = T_Base*overlap;
  enddef;

  def comp niederer_Cross_Bridges as
    var time: ms {pub: in};
    var dExtensionRatiodt: per_ms {pub: in};
    var Q: dimensionless;
    var a: dimensionless {init: 0.35};
    var Q_1: dimensionless {init: 0};
    var Q_2: dimensionless {init: 0};
    var Q_3: dimensionless {init: 0};
    var A_1: dimensionless {init: -29};
    var A_2: dimensionless {init: 138};
    var A_3: dimensionless {init: 129};
    var alpha_1: per_ms {init: 0.03};
    var alpha_2: per_ms {init: 0.13};
    var alpha_3: per_ms {init: 0.625};
    var T_0: N_per_mm2 {pub: in};
    var Tension: N_per_mm2 {pub: out};
    Q = Q_1+Q_2+Q_3;
    Tension = sel
      case Q < 0{dimensionless}:
        T_0*(a*Q+1{dimensionless})/(1{dimensionless}-Q);
      otherwise:
        T_0*(1{dimensionless}+(a+2{dimensionless})*Q)/(1{dimensionless}+Q);
    endsel;
    ode(Q_1, time) = A_1*dExtensionRatiodt-alpha_1*Q_1;
    ode(Q_2, time) = A_2*dExtensionRatiodt-alpha_2*Q_2;
    ode(Q_3, time) = A_3*dExtensionRatiodt-alpha_3*Q_3;
  enddef;

  // isVersionOf: http://identifiers.org/go/GO:0005272
  // isVersionOf: http://identifiers.org/go/GO:0034706
  // isVersionOf: http://identifiers.org/go/GO:0005248
  // isVersionOf: http://identifiers.org/go/GO:0001518
  // isVersionOf: http://identifiers.org/go/GO:0005267
  // isVersionOf: http://identifiers.org/go/GO:0034705
  // isVersionOf: http://identifiers.org/go/GO:0005249
  // isVersionOf: http://identifiers.org/go/GO:0008076
  // isVersionOf: http://identifiers.org/go/GO:0005262
  // isVersionOf: http://identifiers.org/go/GO:0034704
  // isVersionOf: http://identifiers.org/go/GO:0005245
  // isVersionOf: http://identifiers.org/go/GO:0005891
  // isVersionOf: http://identifiers.org/fma/FMA:62492
  // isVersionOf: http://identifiers.org/go/GO:0005219
  def comp intracellular_ion_concentrations as
    var Na_i: mM {init: 11.28, pub: out};
    var Ca_i: mM {init: 0.00011423, pub: out};
    var Ca_SR: mM {init: 721.96e-3, pub: out};
    var K_i: mM {init: 138.7225, pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var TRPN: mM {init: 0.0661796, pub: out};
    var V_myo_uL: uL {pub: in};
    var V_SR_uL: uL {pub: in};
    var time: ms {pub: in};
    var F: C_per_mole {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/chebi/CHEBI:38634
    var I_Na: uA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0022840
    var I_B_Na: uA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0022841
    var I_B_K: uA {pub: in};
    var I_NaK: uA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005272
    // isVersionOf: http://identifiers.org/go/GO:0034706
    // isVersionOf: http://identifiers.org/go/GO:0005248
    // isVersionOf: http://identifiers.org/go/GO:0001518
    var I_f_Na: uA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0006815
    var I_f_K: uA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005267
    // isVersionOf: http://identifiers.org/go/GO:0034705
    // isVersionOf: http://identifiers.org/go/GO:0005249
    // isVersionOf: http://identifiers.org/go/GO:0008076
    // isVersionOf: http://identifiers.org/go/GO:0005391
    // isVersionOf: http://identifiers.org/go/GO:0005890
    var I_K1: uA {pub: in};
    var I_t: uA {pub: in};
    var I_ss: uA {pub: in};
    var I_Stim: uA {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62492
    // isVersionOf: http://identifiers.org/go/GO:0005219
    var I_RyR: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_LCC: uA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0030181
    var I_NaCa: uA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    // isVersionOf: http://identifiers.org/go/GO:0005388
    // isVersionOf: http://identifiers.org/go/GO:0015275
    var I_SERCA: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    // isVersionOf: http://identifiers.org/go/GO:0005245
    // isVersionOf: http://identifiers.org/go/GO:0005891
    var I_pCa: uA {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var I_CaB: uA {pub: in};
    var I_SR: mM_per_ms {pub: in};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    var I_TRPN: mM_per_ms {pub: in};
    var beta_CMDN: dimensionless {pub: in};
    // isVersionOf: http://identifiers.org/go/GO:0022840
    // isVersionOf: http://identifiers.org/go/GO:0005262
    // isVersionOf: http://identifiers.org/go/GO:0034704
    var Ca_b: mM {pub: out};
    // isVersionOf: http://identifiers.org/fma/FMA:62338
    // isVersionOf: http://identifiers.org/fma/FMA:67901
    // isVersionOf: http://identifiers.org/go/GO:0030172
    // isVersionOf: http://identifiers.org/go/GO:0005861
    var Ca_TRPN_Max: mM {pub: in};
    Ca_b = Ca_TRPN_Max-TRPN;
    ode(Na_i, time) = -(I_Na+I_B_Na+I_NaCa*3{dimensionless}+I_NaK*3{dimensionless}+I_f_Na)*1{dimensionless}/(V_myo_uL*F);
    ode(K_i, time) = -(I_Stim+I_ss+I_B_K+I_t+I_K1+I_f_K+(-2{dimensionless}*I_NaK))*1{dimensionless}/(V_myo_uL*F);
    ode(TRPN, time) = I_TRPN;
    ode(Ca_i, time) = beta_CMDN*(I_RyR-I_SERCA+I_SR+I_TRPN-(-2{dimensionless}*I_NaCa+I_pCa+I_CaB+I_LCC)/(2{dimensionless}*V_myo_uL*F));
    ode(Ca_SR, time) = V_myo_uL/V_SR_uL*(-I_RyR+I_SERCA-I_SR);
  enddef;

  def group as containment for
    comp membrane incl
      comp pandit_sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h_gate;
        comp sodium_current_j_gate;
      endcomp;
      comp pandit_Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s_gate;
        comp Ca_independent_transient_outward_K_current_s_slow_gate;
      endcomp;
      comp pandit_steady_state_outward_K_current incl
        comp steady_state_outward_K_current_r_ss_gate;
        comp steady_state_outward_K_current_s_ss_gate;
      endcomp;
      comp pandit_inward_rectifier;
      comp pandit_hyperpolarisation_activated_current incl
        comp hyperpolarisation_activated_current_y_gate;
      endcomp;
      comp pandit_background_currents;
      comp pandit_sodium_potassium_pump;
      comp pandit_standard_ionic_concentrations;
      comp intracellular_ion_concentrations;
      comp cell_geometry;
      comp hinch_CaRU incl
        comp CaRU_Transitions;
        comp DS_Calcium_Concentrations;
        comp LCC_and_RyR_fluxes;
        comp CaRU_states;
        comp CaRU_reduced_states;
        comp RyR_current;
        comp LCC_current;
      endcomp;
      comp hinch_Na_Ca_Exchanger;
      comp hinch_SERCA;
      comp hinch_Sarcolemmal_Ca_pump;
      comp hinch_Background_Ca_current;
      comp hinch_SR_Ca_leak_current;
      comp hinch_calmodulin_Ca_buffer;
      comp convert_hinch;
    endcomp;
    comp niederer_Myofilaments incl
      comp niederer_thinfilaments incl
        comp niederer_tropomyosin;
        comp niederer_troponin;
      endcomp;
      comp niederer_filament_overlap;
      comp niederer_Cross_Bridges;
      comp niederer_isometric_tension;
      comp niederer_length_independent_tension;
    endcomp;
  enddef;

  def group as encapsulation for
    comp pandit_sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h_gate;
      comp sodium_current_j_gate;
    endcomp;
    comp pandit_Ca_independent_transient_outward_K_current incl
      comp Ca_independent_transient_outward_K_current_r_gate;
      comp Ca_independent_transient_outward_K_current_s_gate;
      comp Ca_independent_transient_outward_K_current_s_slow_gate;
    endcomp;
    comp pandit_steady_state_outward_K_current incl
      comp steady_state_outward_K_current_r_ss_gate;
      comp steady_state_outward_K_current_s_ss_gate;
    endcomp;
    comp pandit_hyperpolarisation_activated_current incl
      comp hyperpolarisation_activated_current_y_gate;
    endcomp;
    comp hinch_CaRU incl
      comp CaRU_Transitions;
      comp CaRU_states;
      comp CaRU_reduced_states;
      comp DS_Calcium_Concentrations;
      comp LCC_and_RyR_fluxes;
      comp RyR_current;
      comp LCC_current;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between pandit_sodium_current and environment for
    vars time and time;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between pandit_steady_state_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between pandit_hyperpolarisation_activated_current and environment for
    vars time and time;
  enddef;
  def map between hinch_CaRU and environment for
    vars time and time;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars I_Stim and I_Stim;
    vars F and F;
  enddef;
  def map between pandit_sodium_current and membrane for
    vars i_Na and I_Na;
    vars F and F;
    vars V and V;
    vars R and R;
    vars T and T;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and membrane for
    vars i_t and I_t;
    vars F and F;
    vars V and V;
    vars R and R;
    vars T and T;
  enddef;
  def map between pandit_steady_state_outward_K_current and membrane for
    vars i_ss and I_ss;
    vars V and V;
  enddef;
  def map between pandit_inward_rectifier and membrane for
    vars i_K1 and I_K1;
    vars F and F;
    vars V and V;
    vars R and R;
    vars T and T;
  enddef;
  def map between pandit_hyperpolarisation_activated_current and membrane for
    vars i_f and I_f;
    vars V and V;
  enddef;
  def map between pandit_background_currents and membrane for
    vars i_B_Na and I_B_Na;
    vars i_B_K and I_B_K;
    vars V and V;
  enddef;
  def map between pandit_sodium_potassium_pump and membrane for
    vars i_NaK and I_NaK;
    vars F and F;
    vars V and V;
    vars R and R;
    vars T and T;
  enddef;
  def map between hinch_CaRU and membrane for
    vars V and V;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between hinch_Na_Ca_Exchanger and membrane for
    vars FVRT and FVRT;
  enddef;
  def map between hinch_Background_Ca_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between pandit_sodium_current and intracellular_ion_concentrations for
    vars i_Na and I_Na;
    vars Na_i and Na_i;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars i_t and I_t;
    vars K_i and K_i;
  enddef;
  def map between pandit_steady_state_outward_K_current and intracellular_ion_concentrations for
    vars i_ss and I_ss;
  enddef;
  def map between pandit_inward_rectifier and intracellular_ion_concentrations for
    vars i_K1 and I_K1;
    vars K_i and K_i;
  enddef;
  def map between pandit_hyperpolarisation_activated_current and intracellular_ion_concentrations for
    vars i_f_Na and I_f_Na;
    vars i_f_K and I_f_K;
  enddef;
  def map between pandit_background_currents and intracellular_ion_concentrations for
    vars i_B_Na and I_B_Na;
    vars i_B_K and I_B_K;
  enddef;
  def map between pandit_sodium_potassium_pump and intracellular_ion_concentrations for
    vars i_NaK and I_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between pandit_sodium_current and pandit_standard_ionic_concentrations for
    vars Na_o and Na_o;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and pandit_standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between pandit_inward_rectifier and pandit_standard_ionic_concentrations for
    vars K_o and K_o;
  enddef;
  def map between pandit_sodium_potassium_pump and pandit_standard_ionic_concentrations for
    vars K_o and K_o;
    vars Na_o and Na_o;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and pandit_steady_state_outward_K_current for
    vars E_K and E_K;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and pandit_inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and pandit_hyperpolarisation_activated_current for
    vars E_K and E_K;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and pandit_background_currents for
    vars E_K and E_K;
  enddef;
  def map between pandit_sodium_current and pandit_hyperpolarisation_activated_current for
    vars E_Na and E_Na;
  enddef;
  def map between pandit_sodium_current and pandit_background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between cell_geometry and intracellular_ion_concentrations for
    vars V_myo_uL and V_myo_uL;
    vars V_SR_uL and V_SR_uL;
  enddef;
  def map between cell_geometry and hinch_CaRU for
    vars V_myo and V_myo;
  enddef;
  def map between cell_geometry and convert_hinch for
    vars V_myo_uL and V_myo_uL;
  enddef;
  def map between hinch_CaRU and convert_hinch for
    vars I_LCC and hinch_I_LCC;
    vars I_RyR and hinch_I_RyR;
  enddef;
  def map between hinch_Na_Ca_Exchanger and convert_hinch for
    vars I_NaCa and hinch_I_NaCa;
  enddef;
  def map between hinch_Sarcolemmal_Ca_pump and convert_hinch for
    vars I_pCa and hinch_I_pCa;
  enddef;
  def map between hinch_Background_Ca_current and convert_hinch for
    vars I_CaB and hinch_I_CaB;
  enddef;
  def map between hinch_calmodulin_Ca_buffer and intracellular_ion_concentrations for
    vars beta_CMDN and beta_CMDN;
    vars Ca_i and Ca_i;
  enddef;
  def map between convert_hinch and intracellular_ion_concentrations for
    vars I_LCC and I_LCC;
    vars I_RyR and I_RyR;
    vars I_NaCa and I_NaCa;
    vars I_pCa and I_pCa;
    vars I_CaB and I_CaB;
  enddef;
  def map between convert_hinch and membrane for
    vars I_NaCa and I_NaCa;
    vars I_LCC and I_LCC;
    vars I_pCa and I_pCa;
    vars I_CaB and I_CaB;
    vars F and F;
  enddef;
  def map between hinch_CaRU and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
  enddef;
  def map between hinch_Na_Ca_Exchanger and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
  enddef;
  def map between hinch_SERCA and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars I_SERCA and I_SERCA;
  enddef;
  def map between hinch_Sarcolemmal_Ca_pump and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
  enddef;
  def map between hinch_Background_Ca_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
  enddef;
  def map between hinch_SR_Ca_leak_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars I_SR and I_SR;
  enddef;
  def map between hinch_CaRU and pandit_standard_ionic_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between hinch_Na_Ca_Exchanger and pandit_standard_ionic_concentrations for
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between hinch_Background_Ca_current and pandit_standard_ionic_concentrations for
    vars Ca_o and Ca_o;
  enddef;
  def map between pandit_sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between pandit_sodium_current and sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between pandit_sodium_current and sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between pandit_Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_slow_gate for
    vars s_slow and s_slow;
    vars time and time;
    vars V and V;
  enddef;
  def map between pandit_steady_state_outward_K_current and steady_state_outward_K_current_r_ss_gate for
    vars r_ss and r_ss;
    vars time and time;
    vars V and V;
  enddef;
  def map between pandit_steady_state_outward_K_current and steady_state_outward_K_current_s_ss_gate for
    vars s_ss and s_ss;
    vars time and time;
    vars V and V;
  enddef;
  def map between pandit_hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars y and y;
    vars V and V;
    vars time and time;
  enddef;
  def map between hinch_CaRU and CaRU_reduced_states for
    vars time and time;
  enddef;
  def map between hinch_CaRU and LCC_and_RyR_fluxes for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
    vars Ca_i and Ca_i;
    vars Ca_SR and Ca_SR;
    vars Ca_o and Ca_o;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between hinch_CaRU and CaRU_Transitions for
    vars V and V;
    vars Ca_i and Ca_i;
  enddef;
  def map between CaRU_Transitions and CaRU_states for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
    vars beta_pcc and beta_pcc;
    vars beta_poc and beta_poc;
    vars beta_m and beta_m;
  enddef;
  def map between CaRU_Transitions and RyR_current for
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
  enddef;
  def map between CaRU_Transitions and LCC_current for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
  enddef;
  def map between CaRU_states and RyR_current for
    vars y_oo and y_oo;
    vars y_co and y_co;
    vars y_oc and y_oc;
  enddef;
  def map between CaRU_states and LCC_current for
    vars y_oo and y_oo;
    vars y_oc and y_oc;
  enddef;
  def map between LCC_and_RyR_fluxes and RyR_current for
    vars J_Roo and J_Roo;
    vars J_Rco and J_Rco;
  enddef;
  def map between LCC_and_RyR_fluxes and LCC_current for
    vars J_Loo and J_Loo;
    vars J_Loc and J_Loc;
  enddef;
  def map between CaRU_reduced_states and RyR_current for
    vars z_1 and z_1;
    vars z_3 and z_3;
  enddef;
  def map between CaRU_reduced_states and LCC_current for
    vars z_1 and z_1;
    vars z_2 and z_2;
  enddef;
  def map between DS_Calcium_Concentrations and CaRU_Transitions for
    vars C_oc and C_oc;
    vars C_co and C_co;
  enddef;
  def map between CaRU_Transitions and CaRU_reduced_states for
    vars alpha_p and alpha_p;
    vars alpha_m and alpha_m;
    vars beta_pcc and beta_pcc;
    vars beta_m and beta_m;
    vars epsilon_pco and epsilon_pco;
    vars epsilon_pcc and epsilon_pcc;
    vars epsilon_m and epsilon_m;
    vars mu_poc and mu_poc;
    vars mu_pcc and mu_pcc;
    vars mu_moc and mu_moc;
    vars mu_mcc and mu_mcc;
  enddef;
  def map between CaRU_states and CaRU_reduced_states for
    vars y_oc and y_oc;
    vars y_cc and y_cc;
    vars y_co and y_co;
  enddef;
  def map between hinch_CaRU and DS_Calcium_Concentrations for
    vars g_D and g_D;
    vars J_R and J_R;
    vars J_L and J_L;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
    vars Ca_SR and Ca_SR;
    vars FVRT_Ca and FVRT_Ca;
  enddef;
  def map between hinch_CaRU and RyR_current for
    vars V_myo and V_myo;
    vars N and N;
    vars I_RyR and I_RyR;
  enddef;
  def map between hinch_CaRU and LCC_current for
    vars V_myo and V_myo;
    vars N and N;
    vars I_LCC and I_LCC;
  enddef;
  def map between niederer_tropomyosin and environment for
    vars time and time;
  enddef;
  def map between niederer_Myofilaments and environment for
    vars time and time;
  enddef;
  def map between niederer_Cross_Bridges and environment for
    vars time and time;
  enddef;
  def map between niederer_troponin and intracellular_ion_concentrations for
    vars Ca_TRPN_Max and Ca_TRPN_Max;
    vars TRPN and TRPN;
    vars Ca_i and Ca_i;
    vars I_TRPN and I_TRPN;
  enddef;
  def map between niederer_tropomyosin and intracellular_ion_concentrations for
    vars Ca_b and Ca_b;
  enddef;
  def map between niederer_length_independent_tension and niederer_tropomyosin for
    vars z and z;
    vars z_max and z_max;
  enddef;
  def map between niederer_troponin and niederer_Cross_Bridges for
    vars Tension and Tension;
  enddef;
  def map between niederer_troponin and niederer_length_independent_tension for
    vars T_ref and T_ref;
  enddef;
  def map between niederer_tropomyosin and niederer_troponin for
    vars k_on and k_on;
    vars k_Ref_off and k_Ref_off;
    vars gamma_trpn and gamma_trpn;
    vars Ca_TRPN_Max and Ca_TRPN_Max;
  enddef;
  def map between niederer_tropomyosin and niederer_filament_overlap for
    vars beta_0 and beta_0;
  enddef;
  def map between niederer_tropomyosin and niederer_Myofilaments for
    vars lambda and lambda;
  enddef;
  def map between niederer_filament_overlap and niederer_Myofilaments for
    vars lambda and lambda;
  enddef;
  def map between niederer_isometric_tension and niederer_length_independent_tension for
    vars T_Base and T_Base;
  enddef;
  def map between niederer_isometric_tension and niederer_filament_overlap for
    vars overlap and overlap;
  enddef;
  def map between niederer_Cross_Bridges and niederer_Myofilaments for
    vars dExtensionRatiodt and dExtensionRatiodt;
  enddef;
  def map between niederer_Cross_Bridges and niederer_isometric_tension for
    vars T_0 and T_0;
  enddef;
enddef;
