<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 22/04/2010 at 2:44:01 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="olsen_2003" cmeta:id="olsen_2003" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Mechanism of Protection of Peroxidase Activity by Oscillatory Dynamics</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs in COR and OpenCell and the units are consistent throughout. At present it does not reproduce the published results, although the equations are a faithful match to the paper. Oscillatory behavior is seen in the published figures but cannot be reproduced in CellML, and is probably a result of an additional equation describing oxygen fluctuations. However, when run to steady state the state variables are close to published steady state values. 
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: The peroxidase-oxidase reaction is known to involve reactive oxygen species as intermediates. These intermediates inactivate many types of biomolecules, including peroxidase itself. Previously, we have shown that oscillatory dynamics in the peroxidase-oxidase reaction seem to protect the enzyme from inactivation. It was suggested that this is due to a lower average concentration of reactive oxygen species in the oscillatory state compared to the steady state. Here, we studied the peroxidase-oxidase reaction with either 4-hydroxybenzoic acid or melatonin as cofactors. We show that the protective effect of oscillatory dynamics is present in both cases. We also found that the enzyme degradation depends on the concentration of the cofactor and on the pH of the reaction mixture. We simulated the oscillatory behaviour, including the oscillation/steady state bistability observed experimentally, using a detailed reaction scheme. The computational results confirm the hypothesis that protection is due to lower average concentrations of superoxide radical during oscillations. They also show that the shape of the oscillations changes with increasing cofactor concentration resulting in a further decrease in the average concentration of radicals. We therefore hypothesize that the protective effect of oscillatory dynamics is a general effect in this system.
</para>
				<para>
The original paper reference is cited below:
</para>
				<para>
					Mechanism of protection of peroxidase activity by oscillatory dynamics, Lars F. Olsen, Marcus J. B. Hauser and Ursula Kummer, 2003, <emphasis>European Journal of Biochemistry</emphasis>, 270, 2796-2804.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=12823550&amp;dopt=Abstract">PubMed ID: 12823550</ulink>
				</para>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>reaction diagram</title>
							</objectinfo>
							<imagedata fileref="olsen_2003.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the peroxidase-oxidase reaction.  Per<superscript>3+</superscript> and Per<superscript>2+</superscript> indicate iron(III) and iron(II) peroxidase respectively.  Enzyme intermediates compound I, II and III are represented as coI, coII, and coIII.  ArH and Ar' indicate the aromatic compound 4-hydroxybenzoic acid, or melatonin, and its free radical respectively.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Description rdf:about="#O2">
			<dc:title>O2</dc:title>
			<dcterms:alternative>oxygen</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#O2_radical">
			<dc:title>O2_radical</dc:title>
			<dcterms:alternative>oxygen free radical</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#O2_liquid">
			<dc:title>O2_liquid</dc:title>
			<dcterms:alternative>liquid oxygen</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#O2_gas">
			<dc:title>O2_gas</dc:title>
			<dcterms:alternative>oxygen gas</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#NADH">
			<dc:title>NADH</dc:title>
			<dcterms:alternative>nicotinamide adenine dinucleotide</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#NAD">
			<dc:title>NAD</dc:title>
			<dcterms:alternative>oxidised nicotinamide adenine dinucleotide</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#NAD">
			<dc:title>NAD_radical</dc:title>
			<dcterms:alternative>nicotinamide adenine dinucleotide free radical</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#NAD2">
			<dc:title>NAD2</dc:title>
			<dcterms:alternative>nicotinamide adenine dinucleotide</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#H2O2">
			<dc:title>H2O2</dc:title>
			<dcterms:alternative>peroxide</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#H">
			<dc:title>H</dc:title>
			<dcterms:alternative>proton</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#Per3">
			<dc:title>Per3</dc:title>
			<dcterms:alternative>ferric peroxidase</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#Per2">
			<dc:title>Per2</dc:title>
			<dcterms:alternative>ferrous peroxidase</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#coI">
			<dc:title>coI</dc:title>
			<dcterms:alternative>compound I</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#coII">
			<dc:title>coII</dc:title>
			<dcterms:alternative>compound II</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#coIII">
			<dc:title>coIII</dc:title>
			<dcterms:alternative>compound III</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#Ar_radical">
			<dc:title>Ar_radical</dc:title>
			<dcterms:alternative>aromatic compound free radical</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#ArH">
			<dc:title>ArH</dc:title>
			<dcterms:alternative>aromatic compound</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Seq rdf:about="rdf:#1d7d0513-d94c-4cbe-9d46-94dbdc19499b">
			<rdf:li rdf:resource="rdf:#c66bb80b-b159-45af-a76c-e0190379035a"/>
			<rdf:li rdf:resource="rdf:#ebd6a011-bb69-4526-b454-0ccd085190cd"/>
			<rdf:li rdf:resource="rdf:#d3dedc48-2b65-49af-b9e3-52d8cf2e9428"/>
		</rdf:Seq>
		<rdf:Description rdf:about="rdf:#be44af0b-4741-4de3-8478-84195580d281">
			<dcterms:W3CDTF>2003-07</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#39870e8c-dc8e-4eaf-b2e6-646dfeef171b">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#1030ee69-1098-471c-b57a-c347f86c71b9">
			<vCard:Given>Ursula</vCard:Given>
			<vCard:Family>Kummer</vCard:Family>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d3dedc48-2b65-49af-b9e3-52d8cf2e9428">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#1030ee69-1098-471c-b57a-c347f86c71b9"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#46e35e70-a09e-4d35-b851-699f53cf5da5">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#47eed3ab-ba4c-466e-a6be-6448873f5183">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value>
				<rdf:Bag>
					<rdf:li>peroxidase</rdf:li>
					<rdf:li>oscillator</rdf:li>
					<rdf:li>metabolism</rdf:li>
				</rdf:Bag>
			</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a034fafd-7273-4f29-a5d6-667c2d7d709c">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#241ad5fd-7c87-4e2b-874a-4b216c85ee10">
			<dcterms:W3CDTF>2004-01-22</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:publisher>
        The University of Auckland, Auckland Bioengineering Institute
      </dc:publisher>
			<dcterms:created rdf:resource="rdf:#241ad5fd-7c87-4e2b-874a-4b216c85ee10"/>
			<dc:creator rdf:resource="rdf:#a76fdf1e-0baa-42f5-b3f2-d89dbe0c8c13"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d132f7c7-e25b-4500-b826-745c8c6b6461">
			<dc:subject rdf:resource="rdf:#47eed3ab-ba4c-466e-a6be-6448873f5183"/>
		</rdf:Description>
		<rdf:Description rdf:about="#olsen_2003">
			<dc:title>
        Olsen et al.'s 2003 mathematical model of the peroxidase-oxidase reaction.
      </dc:title>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#d774d218-e9b8-4308-9984-4b46a8ae87bc"/>
			<bqs:reference rdf:resource="rdf:#6bb44444-80a6-49c9-a3be-749c42629de5"/>
			<bqs:reference rdf:resource="rdf:#d132f7c7-e25b-4500-b826-745c8c6b6461"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#90e5a00c-0803-4aa0-8a47-26c2d56c53e5">
			<dc:title>European Journal of Biochemistry</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ebd6a011-bb69-4526-b454-0ccd085190cd">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#05a8826a-5359-47d8-bcb6-ed3a0b08c707"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a76fdf1e-0baa-42f5-b3f2-d89dbe0c8c13">
			<vCard:ORG rdf:resource="rdf:#80517bd5-68c5-42a6-979e-6d1e04b38f26"/>
			<vCard:EMAIL rdf:resource="rdf:#a034fafd-7273-4f29-a5d6-667c2d7d709c"/>
			<vCard:N rdf:resource="rdf:#46e35e70-a09e-4d35-b851-699f53cf5da5"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#052901af-ade6-46e2-bb49-9ebc88d8c01f">
			<vCard:Given>Lars</vCard:Given>
			<vCard:Family>Olsen</vCard:Family>
			<vCard:Other>F</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#80517bd5-68c5-42a6-979e-6d1e04b38f26">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#6bb44444-80a6-49c9-a3be-749c42629de5">
			<bqs:Pubmed_id>12823550</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#20ea0fe3-14e1-4aa9-8bd6-56979c10eb0d"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#05a8826a-5359-47d8-bcb6-ed3a0b08c707">
			<vCard:Given>Marcus</vCard:Given>
			<vCard:Family>Hauser</vCard:Family>
			<vCard:Other>B</vCard:Other>
			<vCard:Other>J</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d774d218-e9b8-4308-9984-4b46a8ae87bc">
			<dc:creator rdf:resource="rdf:#39870e8c-dc8e-4eaf-b2e6-646dfeef171b"/>
			<rdf:value>
          This is the CellML description of Olsen et al.'s 2003 mathematical model of the peroxidase-oxidase reaction.
        </rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#c66bb80b-b159-45af-a76c-e0190379035a">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#052901af-ade6-46e2-bb49-9ebc88d8c01f"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#20ea0fe3-14e1-4aa9-8bd6-56979c10eb0d">
			<dc:creator rdf:resource="rdf:#1d7d0513-d94c-4cbe-9d46-94dbdc19499b"/>
			<dc:title>
            Mechanism of protection of peroxidase activity by oscillatory dynamics
          </dc:title>
			<bqs:volume>270</bqs:volume>
			<bqs:first_page>2796</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#90e5a00c-0803-4aa0-8a47-26c2d56c53e5"/>
			<dcterms:issued rdf:resource="rdf:#be44af0b-4741-4de3-8478-84195580d281"/>
			<bqs:last_page>2804</bqs:last_page>
		</rdf:Description>
	</rdf:RDF>   <units xmlns="http://www.cellml.org/cellml/1.0#" name="molar">
      <unit units="mole"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="flux">
      <unit units="molar"/>
      <unit units="second" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="first_order_rate_constant">
      <unit units="second" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="second_order_rate_constant">
      <unit units="molar" exponent="-1"/>
      <unit units="second" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="second" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="O2">
      <variable name="O2" units="molar" initial_value="5.33e-6" public_interface="out"/>
      <variable name="v1" units="flux" public_interface="in"/>
      <variable name="v5" units="flux" public_interface="in"/>
      <variable name="v7" units="flux" public_interface="in"/>
      <variable name="v11" units="flux" public_interface="in"/>
      <variable name="v13_back" units="flux" public_interface="in"/>
      <variable name="v13" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>O2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>v1</ci>
                           </apply>
                           <ci>v5</ci>
                        </apply>
                        <ci>v7</ci>
                     </apply>
                     <ci>v11</ci>
                  </apply>
                  <ci>v13</ci>
               </apply>
               <ci>v13_back</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="O2_radical">
      <variable name="O2_radical" units="molar" initial_value="0.026e-6" public_interface="out"/>
      <variable name="v5" units="flux" public_interface="in"/>
      <variable name="v6" units="flux" public_interface="in"/>
      <variable name="v7" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>O2_radical</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <ci>v5</ci>
                  <ci>v6</ci>
               </apply>
               <apply>
                  <times/>
                  <cn cellml:units="dimensionless">2</cn>
                  <ci>v7</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="NADH">
      <variable name="NADH" units="molar" initial_value="0.95e-6" public_interface="out"/>
      <variable name="v1" units="flux" public_interface="in"/>
      <variable name="v12" units="flux" public_interface="in"/>
      <variable name="v14" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>NADH</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <ci>v1</ci>
                  </apply>
                  <ci>v12</ci>
               </apply>
               <ci>v14</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="NAD">
      <variable name="NAD" units="molar" initial_value="558e-6" public_interface="out"/>
      <variable name="v1" units="flux" public_interface="in"/>
      <variable name="v5" units="flux" public_interface="in"/>
      <variable name="v8" units="flux" public_interface="in"/>
      <variable name="v10" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>NAD</ci>
            </apply>
            <apply>
               <plus/>
               <ci>v1</ci>
               <ci>v5</ci>
               <ci>v8</ci>
               <ci>v10</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="NAD_radical">
      <variable name="NAD_radical" units="molar" initial_value="5e-10" public_interface="out"/>
      <variable name="v9" units="flux" public_interface="in"/>
      <variable name="v5" units="flux" public_interface="in"/>
      <variable name="v8" units="flux" public_interface="in"/>
      <variable name="v10" units="flux" public_interface="in"/>
      <variable name="v14" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>NAD_radical</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <minus/>
                        <apply>
                           <times/>
                           <apply>
                              <minus/>
                              <cn cellml:units="dimensionless">2</cn>
                           </apply>
                           <ci>v9</ci>
                        </apply>
                        <ci>v5</ci>
                     </apply>
                     <ci>v8</ci>
                  </apply>
                  <ci>v10</ci>
               </apply>
               <ci>v14</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="NAD2">
      <variable name="NAD2" units="molar" initial_value="0.12e-6" public_interface="out"/>
      <variable name="v9" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>NAD2</ci>
            </apply>
            <ci>v9</ci>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="H2O2">
      <variable name="H2O2" units="molar" initial_value="0.013e-6" public_interface="out"/>
      <variable name="v1" units="flux" public_interface="in"/>
      <variable name="v2" units="flux" public_interface="in"/>
      <variable name="v7" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>H2O2</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <ci>v1</ci>
                  <ci>v2</ci>
               </apply>
               <ci>v7</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="Per3">
      <variable name="Per3" units="molar" initial_value="0.059e-6" public_interface="out"/>
      <variable name="v2" units="flux" public_interface="in"/>
      <variable name="v4" units="flux" public_interface="in"/>
      <variable name="v6" units="flux" public_interface="in"/>
      <variable name="v10" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Per3</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <minus/>
                        <ci>v2</ci>
                     </apply>
                     <ci>v4</ci>
                  </apply>
                  <ci>v6</ci>
               </apply>
               <ci>v10</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="Per2">
      <variable name="Per2" units="molar" initial_value="1e-10" public_interface="out"/>
      <variable name="v10" units="flux" public_interface="in"/>
      <variable name="v11" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Per2</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <ci>v11</ci>
               </apply>
               <ci>v10</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="coI">
      <variable name="coI" units="molar" initial_value="8.9e-10" public_interface="out"/>
      <variable name="v2" units="flux" public_interface="in"/>
      <variable name="v3" units="flux" public_interface="in"/>
      <variable name="v8" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>coI</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <ci>v2</ci>
                  <ci>v3</ci>
               </apply>
               <ci>v8</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="coII">
      <variable name="coII" units="molar" initial_value="0.026e-6" public_interface="out"/>
      <variable name="v3" units="flux" public_interface="in"/>
      <variable name="v4" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>coII</ci>
            </apply>
            <apply>
               <minus/>
               <ci>v3</ci>
               <ci>v4</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="coIII">
      <variable name="coIII" units="molar" initial_value="1.31e-6" public_interface="out"/>
      <variable name="v6" units="flux" public_interface="in"/>
      <variable name="v8" units="flux" public_interface="in"/>
      <variable name="v11" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>coIII</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <ci>v6</ci>
                  <ci>v8</ci>
               </apply>
               <ci>v11</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="Ar_radical">
      <variable name="Ar_radical" units="molar" initial_value="0.12e-6" public_interface="out"/>
      <variable name="v3" units="flux" public_interface="in"/>
      <variable name="v4" units="flux" public_interface="in"/>
      <variable name="v14" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Ar_radical</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>v3</ci>
                  <ci>v4</ci>
               </apply>
               <ci>v14</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="ArH">
      <variable name="ArH" units="molar" initial_value="299.88e-6" public_interface="out"/>
      <variable name="v3" units="flux" public_interface="in"/>
      <variable name="v4" units="flux" public_interface="in"/>
      <variable name="v14" units="flux" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>ArH</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <ci>v3</ci>
                  </apply>
                  <ci>v4</ci>
               </apply>
               <ci>v14</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v1">
      <variable name="v1" units="flux" public_interface="out"/>
      <variable name="NADH" units="molar" public_interface="in"/>
      <variable name="O2" units="molar" public_interface="in"/>
      <variable name="k1" units="second_order_rate_constant" initial_value="3"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v1</ci>
            <apply>
               <times/>
               <ci>k1</ci>
               <ci>NADH</ci>
               <ci>O2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v2">
      <variable name="v2" units="flux" public_interface="out"/>
      <variable name="H2O2" units="molar" public_interface="in"/>
      <variable name="Per3" units="molar" public_interface="in"/>
      <variable name="k2" units="second_order_rate_constant" initial_value="1.8e7"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v2</ci>
            <apply>
               <times/>
               <ci>k2</ci>
               <ci>H2O2</ci>
               <ci>Per3</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v3">
      <variable name="v3" units="flux" public_interface="out"/>
      <variable name="coI" units="molar" public_interface="in"/>
      <variable name="ArH" units="molar" public_interface="in"/>
      <variable name="k3" units="second_order_rate_constant" initial_value="1.5e5"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v3</ci>
            <apply>
               <times/>
               <ci>k3</ci>
               <ci>coI</ci>
               <ci>ArH</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v4">
      <variable name="v4" units="flux" public_interface="out"/>
      <variable name="coII" units="molar" public_interface="in"/>
      <variable name="ArH" units="molar" public_interface="in"/>
      <variable name="k4" units="second_order_rate_constant" initial_value="5.2e3"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v4</ci>
            <apply>
               <times/>
               <ci>k4</ci>
               <ci>coII</ci>
               <ci>ArH</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v5">
      <variable name="v5" units="flux" public_interface="out"/>
      <variable name="NAD_radical" units="molar" public_interface="in"/>
      <variable name="O2" units="molar" public_interface="in"/>
      <variable name="k5" units="second_order_rate_constant" initial_value="2e7"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v5</ci>
            <apply>
               <times/>
               <ci>k5</ci>
               <ci>NAD_radical</ci>
               <ci>O2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v6">
      <variable name="v6" units="flux" public_interface="out"/>
      <variable name="O2_radical" units="molar" public_interface="in"/>
      <variable name="Per3" units="molar" public_interface="in"/>
      <variable name="k6" units="second_order_rate_constant" initial_value="1.7e7"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v6</ci>
            <apply>
               <times/>
               <ci>k6</ci>
               <ci>O2_radical</ci>
               <ci>Per3</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v7">
      <variable name="v7" units="flux" public_interface="out"/>
      <variable name="O2_radical" units="molar" public_interface="in"/>
      <variable name="k7" units="second_order_rate_constant" initial_value="2e7"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v7</ci>
            <apply>
               <times/>
               <ci>k7</ci>
               <apply>
                  <power/>
                  <ci>O2_radical</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v8">
      <variable name="v8" units="flux" public_interface="out"/>
      <variable name="coIII" units="molar" public_interface="in"/>
      <variable name="NAD_radical" units="molar" public_interface="in"/>
      <variable name="k8" units="second_order_rate_constant" initial_value="4e7"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v8</ci>
            <apply>
               <times/>
               <ci>k8</ci>
               <ci>coIII</ci>
               <ci>NAD_radical</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v9">
      <variable name="v9" units="flux" public_interface="out"/>
      <variable name="NAD_radical" units="molar" public_interface="in"/>
      <variable name="k9" units="second_order_rate_constant" initial_value="6e7"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v9</ci>
            <apply>
               <times/>
               <ci>k9</ci>
               <apply>
                  <power/>
                  <ci>NAD_radical</ci>
                  <cn cellml:units="dimensionless">2</cn>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v10">
      <variable name="v10" units="flux" public_interface="out"/>
      <variable name="NAD_radical" units="molar" public_interface="in"/>
      <variable name="Per3" units="molar" public_interface="in"/>
      <variable name="k10" units="second_order_rate_constant" initial_value="1.8e6"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v10</ci>
            <apply>
               <times/>
               <ci>k10</ci>
               <ci>Per3</ci>
               <ci>NAD_radical</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v11">
      <variable name="v11" units="flux" public_interface="out"/>
      <variable name="Per2" units="molar" public_interface="in"/>
      <variable name="O2" units="molar" public_interface="in"/>
      <variable name="k11" units="second_order_rate_constant" initial_value="1e5"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v11</ci>
            <apply>
               <times/>
               <ci>k11</ci>
               <ci>Per2</ci>
               <ci>O2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v12">
      <variable name="v12" units="flux" public_interface="out"/>
      <variable name="k12" units="flux" initial_value="0.08e-6"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v12</ci>
            <ci>k12</ci>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v13">
      <variable name="v13" units="flux" public_interface="out"/>
      <variable name="O2eq" units="molar" initial_value="1.2e-5"/>
      <variable name="k13" units="first_order_rate_constant" initial_value="6e-3"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v13</ci>
            <apply>
               <times/>
               <ci>k13</ci>
               <ci>O2eq</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v13_back">
      <variable name="v13_back" units="flux" public_interface="out"/>
      <variable name="O2" units="molar" public_interface="in"/>
      <variable name="k13_" units="first_order_rate_constant" initial_value="6e-3"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v13_back</ci>
            <apply>
               <times/>
               <ci>k13_</ci>
               <ci>O2</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="v14">
      <variable name="v14" units="flux" public_interface="out"/>
      <variable name="Ar_radical" units="molar" public_interface="in"/>
      <variable name="NADH" units="molar" public_interface="in"/>
      <variable name="k14" units="second_order_rate_constant" initial_value="7e5"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>v14</ci>
            <apply>
               <times/>
               <ci>k14</ci>
               <ci>Ar_radical</ci>
               <ci>NADH</ci>
            </apply>
         </apply>
      </math>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NADH" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD_radical" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2_radical" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Per3" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Per2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coI" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coII" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coIII" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="H2O2" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ArH" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Ar_radical" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NADH" component_2="v1"/>
      <map_variables variable_1="v1" variable_2="v1"/>
      <map_variables variable_1="NADH" variable_2="NADH"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2" component_2="v1"/>
      <map_variables variable_1="v1" variable_2="v1"/>
      <map_variables variable_1="O2" variable_2="O2"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD" component_2="v1"/>
      <map_variables variable_1="v1" variable_2="v1"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="H2O2" component_2="v1"/>
      <map_variables variable_1="v1" variable_2="v1"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="H2O2" component_2="v2"/>
      <map_variables variable_1="v2" variable_2="v2"/>
      <map_variables variable_1="H2O2" variable_2="H2O2"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Per3" component_2="v2"/>
      <map_variables variable_1="v2" variable_2="v2"/>
      <map_variables variable_1="Per3" variable_2="Per3"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coI" component_2="v2"/>
      <map_variables variable_1="v2" variable_2="v2"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coI" component_2="v3"/>
      <map_variables variable_1="v3" variable_2="v3"/>
      <map_variables variable_1="coI" variable_2="coI"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ArH" component_2="v3"/>
      <map_variables variable_1="v3" variable_2="v3"/>
      <map_variables variable_1="ArH" variable_2="ArH"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Ar_radical" component_2="v3"/>
      <map_variables variable_1="v3" variable_2="v3"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coII" component_2="v3"/>
      <map_variables variable_1="v3" variable_2="v3"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coII" component_2="v4"/>
      <map_variables variable_1="v4" variable_2="v4"/>
      <map_variables variable_1="coII" variable_2="coII"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ArH" component_2="v4"/>
      <map_variables variable_1="v4" variable_2="v4"/>
      <map_variables variable_1="ArH" variable_2="ArH"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Per3" component_2="v4"/>
      <map_variables variable_1="v4" variable_2="v4"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Ar_radical" component_2="v4"/>
      <map_variables variable_1="v4" variable_2="v4"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD_radical" component_2="v5"/>
      <map_variables variable_1="v5" variable_2="v5"/>
      <map_variables variable_1="NAD_radical" variable_2="NAD_radical"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2" component_2="v5"/>
      <map_variables variable_1="v5" variable_2="v5"/>
      <map_variables variable_1="O2" variable_2="O2"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD" component_2="v5"/>
      <map_variables variable_1="v5" variable_2="v5"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2_radical" component_2="v5"/>
      <map_variables variable_1="v5" variable_2="v5"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2_radical" component_2="v6"/>
      <map_variables variable_1="v6" variable_2="v6"/>
      <map_variables variable_1="O2_radical" variable_2="O2_radical"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Per3" component_2="v6"/>
      <map_variables variable_1="v6" variable_2="v6"/>
      <map_variables variable_1="Per3" variable_2="Per3"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coIII" component_2="v6"/>
      <map_variables variable_1="v6" variable_2="v6"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2_radical" component_2="v7"/>
      <map_variables variable_1="v7" variable_2="v7"/>
      <map_variables variable_1="O2_radical" variable_2="O2_radical"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="H2O2" component_2="v7"/>
      <map_variables variable_1="v7" variable_2="v7"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2" component_2="v7"/>
      <map_variables variable_1="v7" variable_2="v7"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coIII" component_2="v8"/>
      <map_variables variable_1="v8" variable_2="v8"/>
      <map_variables variable_1="coIII" variable_2="coIII"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD_radical" component_2="v8"/>
      <map_variables variable_1="v8" variable_2="v8"/>
      <map_variables variable_1="NAD_radical" variable_2="NAD_radical"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coI" component_2="v8"/>
      <map_variables variable_1="v8" variable_2="v8"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD" component_2="v8"/>
      <map_variables variable_1="v8" variable_2="v8"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD_radical" component_2="v9"/>
      <map_variables variable_1="v9" variable_2="v9"/>
      <map_variables variable_1="NAD_radical" variable_2="NAD_radical"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD2" component_2="v9"/>
      <map_variables variable_1="v9" variable_2="v9"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Per3" component_2="v10"/>
      <map_variables variable_1="v10" variable_2="v10"/>
      <map_variables variable_1="Per3" variable_2="Per3"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD_radical" component_2="v10"/>
      <map_variables variable_1="v10" variable_2="v10"/>
      <map_variables variable_1="NAD_radical" variable_2="NAD_radical"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Per2" component_2="v10"/>
      <map_variables variable_1="v10" variable_2="v10"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD" component_2="v10"/>
      <map_variables variable_1="v10" variable_2="v10"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Per2" component_2="v11"/>
      <map_variables variable_1="v11" variable_2="v11"/>
      <map_variables variable_1="Per2" variable_2="Per2"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2" component_2="v11"/>
      <map_variables variable_1="v11" variable_2="v11"/>
      <map_variables variable_1="O2" variable_2="O2"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="coIII" component_2="v11"/>
      <map_variables variable_1="v11" variable_2="v11"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NADH" component_2="v12"/>
      <map_variables variable_1="v12" variable_2="v12"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2" component_2="v13"/>
      <map_variables variable_1="v13" variable_2="v13"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="O2" component_2="v13_back"/>
      <map_variables variable_1="v13_back" variable_2="v13_back"/>
      <map_variables variable_1="O2" variable_2="O2"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Ar_radical" component_2="v14"/>
      <map_variables variable_1="v14" variable_2="v14"/>
      <map_variables variable_1="Ar_radical" variable_2="Ar_radical"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NADH" component_2="v14"/>
      <map_variables variable_1="v14" variable_2="v14"/>
      <map_variables variable_1="NADH" variable_2="NADH"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ArH" component_2="v14"/>
      <map_variables variable_1="v14" variable_2="v14"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD_radical" component_2="v14"/>
      <map_variables variable_1="v14" variable_2="v14"/>
   </connection>
</model>
