//   FILE :  faville_pullan_sanders_koh_lloyd_smith_2009.xml
//
// CREATED :  14th May 2008
//
// LAST MODIFIED : 14th May 2008
//
// AUTHOR :  Catherine Lloyd
//           Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.1 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Richard Faville et al.'s 2008 biophysically based mathematical model of interstitial cells of Cajal and the pacemaker potentials produced from a unitary potential basis.
//
// CHANGES:
// publisher: Auckland Bioengineering Institute
// created: W3CDTF 2008-07-01T00:00:00+12:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// reference: Pubmed_id 19527643; Given Richard; Family Favile; Other A; Given Andrew; Family Pullan; Other J; Given Kenton; Family Sanders; Other M; Given S; Family Koh; Other D; Given Catherine; Family Lloyd; Other M; Given Nicholas; Family Smith; Other P; title Biophysically based mathematical modeling of interstitial cells of Cajal slow wave activity generated from a discrete unitary potential basis; volume 96(12); first_page 4834; title Biophysical Journal; W3CDTF 2009-06-17 00:00; last_page 4852
// reference: subject_type keyword; electrophysiology
def model faville_pullan_sanders_koh_lloyd_smith_2009 as
  // Biophysically based mathematical modeling of interstitial cells of Cajal slow wave activity generated from a discrete unitary potential basis
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model is known to run PCEnv. Because the model is in a CellML 1.1 format (as opposed to CellML 1.0) COR is unable to run the model. The units have been checked and they are consistent. Please note that the CellML model has been updated since the 2009 publication accccording the the first author's changes.
  //
  // Model Structure
  //
  // ABSTRACT: Spontaneously rhythmic pacemaker activity produced by interstitial cells of Cajal (ICC) is the result of the entrainment of unitary potential depolarizations generated at intracellular sites termed pacemaker units. In this study, we present a mathematical modeling framework that quantitatively represents the transmembrane ion flows and intracellular Ca2+ dynamics from a single ICC operating over the physiological membrane potential range. The mathematical model presented here extends our recently developed biophysically based pacemaker unit modeling framework by including mechanisms necessary for coordinating unitary potential events, such as a T-Type Ca2+ current, Vm-dependent K+ currents, and global Ca2+ diffusion. Model simulations produce spontaneously rhythmic slow wave depolarizations with an amplitude of 65 mV at a frequency of 17.4 cpm. Our model predicts that activity at the spatial scale of the pacemaker unit is fundamental for ICC slow wave generation, and Ca2+ influx from activation of the T-Type Ca2+ current is required for unitary potential entrainment. These results suggest that intracellular Ca2+ levels, particularly in the region local to the mitochondria and endoplasmic reticulum, significantly influence pacing frequency and synchronization of pacemaker unit discharge. Moreover, numerical investigations show that our ICC model is capable of qualitatively replicating a wide range of experimental observations.
  //
  // In the study described here, Richard Faville et al. have developed a mathematical model of the ICC pacemaker potential. The model can be divided into two distinct components: the bulk cytoplasm and the pacemaker units. The later have been described previously (Faville et al., 2008, and the CellML description of this model can be found here (http://models.cellml.org/workspace/faville_pullan_sanders_koh_lloyd_smith_2009/@@file/a69dfff7b0d090bc51b49b5e4cda835130354d8d/faville_pacemaker_unit_2008.cellml)). The pacemaker unit model quantitatively describes the transmembrane ion flows and intracellular Ca2+ dynamics from a single ICC pacemaker unit, and a schematic diagram of this model can be seen in the figure immediately below.
  //
  // model diagram
  //
  // A schematic diagram of the pacemaker unit illustrating all the compartmental volumes and ionic conductances, together with their interactions.
  //
  // The combined model is described here in CellML 1.1. The pacemaker unit is defined and is imported into the bulk cytoplasm 10 times (note that the number of pacemaker units that could be used within the modelling framework is completely arbitrary, however 10 appears to be the minimum number required to adequately describe the pacemaker potential depolarisation). In order to embed the pacemaker model within the bulk cytoplasm modelling framework the original pacemaker model had to be modified slightly. This is because the it was only representative of pacemaker activity near the resting membrane potential of -70mV. In its modified form and embedded within the bulk cytoplasm it is now capable of simulating pacemaker activity under conditions of membrane depolarisation (Vm > -60mV). A full schematic diagram of the combined model is illustrated in the figure below.
  //
  // model diagram
  //
  // A full schematic diagram of the bulk cytoplasm model with the imported pacemaker units illustrating all the compartmental volumes and ionic conductances, together with their interactions.
  //
  // The original paper reference is cited below:
  //
  // Biophysically based mathematical modeling of interstitial cells of Cajal slow wave activity generated from a discrete unitary potential basis, R.A. Faville, A.J. Pullan, K.M. Sanders, S.D. Koh, C.M. Lloyd and N.P. Smith, 2009, Biophysical Journal, 96, 4834-4852. PubMed ID: 19527643 (http://www.ncbi.nlm.nih.gov/pubmed/19527643)
  // The equations defined here in this model decribe the Bulk Cytoplasm Equations from Appendix A in the original paper. There are 10 pacemaker units (n_PU=10), and all of these equations which are listed in Appendix B of the current paper and also in the previously publihsed paper by Faville et al., are defined in a different CellML model called faville_pacemaker_unit_2008.cellml. This model is imported 10 times, via an intermediate model called PU, where JS1S2 is defined (this variable differs between pacemakers) and the two variables JS2Cy and I_ion_PU are passed from the pacemaker unit into the bulk cytoplasm model via PU, while Vm, time and CS2 are passed in the opposite direction - from the bulk cytoplasm model to the pacemaker unit model, again via PU. The imports are listed below. The connections between the importing model and each pacemaker unit are also listed beneath each appropriate import.
  //
  // Catherine Lloyd
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model1 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model1 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU1;
  enddef;
  def map between pacemaker_unit_model1 and JS2Cy for
    vars JS2Cy and JS2Cy1;
    vars CS2 and CS21;
  enddef;
  def map between pacemaker_unit_model1 and JS1S2 for
    vars JS1S2 and JS1S2_1;
    vars CS1 and CS11;
    vars CS2 and CS21;
  enddef;
  def map between pacemaker_unit_model1 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model1 and environment for
    vars time and time;
  enddef;
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model2 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model2 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU2;
  enddef;
  def map between pacemaker_unit_model2 and JS2Cy for
    vars JS2Cy and JS2Cy2;
    vars CS2 and CS22;
  enddef;
  def map between pacemaker_unit_model2 and JS1S2 for
    vars JS1S2 and JS1S2_2;
    vars CS1 and CS12;
    vars CS2 and CS22;
  enddef;
  def map between pacemaker_unit_model2 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model2 and environment for
    vars time and time;
  enddef;
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model3 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model3 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU3;
  enddef;
  def map between pacemaker_unit_model3 and JS2Cy for
    vars JS2Cy and JS2Cy3;
    vars CS2 and CS23;
  enddef;
  def map between pacemaker_unit_model3 and JS1S2 for
    vars JS1S2 and JS1S2_3;
    vars CS1 and CS13;
    vars CS2 and CS23;
  enddef;
  def map between pacemaker_unit_model3 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model3 and environment for
    vars time and time;
  enddef;
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model4 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model4 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU4;
  enddef;
  def map between pacemaker_unit_model4 and JS2Cy for
    vars JS2Cy and JS2Cy4;
    vars CS2 and CS24;
  enddef;
  def map between pacemaker_unit_model4 and JS1S2 for
    vars JS1S2 and JS1S2_4;
    vars CS1 and CS14;
    vars CS2 and CS24;
  enddef;
  def map between pacemaker_unit_model4 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model4 and environment for
    vars time and time;
  enddef;
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model5 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model5 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU5;
  enddef;
  def map between pacemaker_unit_model5 and JS2Cy for
    vars JS2Cy and JS2Cy5;
    vars CS2 and CS25;
  enddef;
  def map between pacemaker_unit_model5 and JS1S2 for
    vars JS1S2 and JS1S2_5;
    vars CS1 and CS15;
    vars CS2 and CS25;
  enddef;
  def map between pacemaker_unit_model5 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model5 and environment for
    vars time and time;
  enddef;
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model6 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model6 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU6;
  enddef;
  def map between pacemaker_unit_model6 and JS2Cy for
    vars JS2Cy and JS2Cy6;
    vars CS2 and CS26;
  enddef;
  def map between pacemaker_unit_model6 and JS1S2 for
    vars JS1S2 and JS1S2_6;
    vars CS1 and CS16;
    vars CS2 and CS26;
  enddef;
  def map between pacemaker_unit_model6 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model6 and environment for
    vars time and time;
  enddef;
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model7 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model7 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU7;
  enddef;
  def map between pacemaker_unit_model7 and JS2Cy for
    vars JS2Cy and JS2Cy7;
    vars CS2 and CS27;
  enddef;
  def map between pacemaker_unit_model7 and JS1S2 for
    vars JS1S2 and JS1S2_7;
    vars CS1 and CS17;
    vars CS2 and CS27;
  enddef;
  def map between pacemaker_unit_model7 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model7 and environment for
    vars time and time;
  enddef;
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model8 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model8 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU8;
  enddef;
  def map between pacemaker_unit_model8 and JS2Cy for
    vars JS2Cy and JS2Cy8;
    vars CS2 and CS28;
  enddef;
  def map between pacemaker_unit_model8 and JS1S2 for
    vars JS1S2 and JS1S2_8;
    vars CS1 and CS18;
    vars CS2 and CS28;
  enddef;
  def map between pacemaker_unit_model8 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model8 and environment for
    vars time and time;
  enddef;
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model9 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model9 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU9;
  enddef;
  def map between pacemaker_unit_model9 and JS2Cy for
    vars JS2Cy and JS2Cy9;
    vars CS2 and CS29;
  enddef;
  def map between pacemaker_unit_model9 and JS1S2 for
    vars JS1S2 and JS1S2_9;
    vars CS1 and CS19;
    vars CS2 and CS29;
  enddef;
  def map between pacemaker_unit_model9 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model9 and environment for
    vars time and time;
  enddef;
  def import using "faville_pacemaker_unit_2008.cellml" for
    comp pacemaker_unit_model10 using comp pacemaker_unit_model;
  enddef;
  def map between pacemaker_unit_model10 and membrane for
    vars Vm and Vm;
    vars I_ion_PU and I_ion_PU10;
  enddef;
  def map between pacemaker_unit_model10 and JS2Cy for
    vars JS2Cy and JS2Cy10;
    vars CS2 and CS210;
  enddef;
  def map between pacemaker_unit_model10 and JS1S2 for
    vars JS1S2 and JS1S2_10;
    vars CS1 and CS110;
    vars CS2 and CS210;
  enddef;
  def map between pacemaker_unit_model10 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between pacemaker_unit_model10 and environment for
    vars time and time;
  enddef;
  // unit definitions
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit first_order_rate_constant_per_millivolt as
    unit second {expo: -1};
    unit millivolt {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_micromolar as
    unit micromolar {expo: -1};
  enddef;
  def unit per_micromolar2 as
    unit micromolar {expo: -2};
  enddef;
  def unit picofarad as
    unit farad {pref: pico};
  enddef;
  def unit picosiemens as
    unit siemens {pref: pico};
  enddef;
  def unit picoampere as
    unit ampere {pref: pico};
  enddef;
  def unit femtoampere as
    unit ampere {pref: femto};
  enddef;
  def unit micromolar_per_coulomb as
    unit micromolar;
    unit coulomb {expo: -1};
  enddef;
  def unit femtocoulomb_per_zeptomole as
    unit coulomb {pref: femto};
    unit mole {pref: zepto, expo: -1};
  enddef;
  def unit attojoule_per_zeptomole_kelvin as
    unit joule {pref: atto};
    unit mole {pref: zepto, expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant_squared as
    unit second {expo: -2};
  enddef;
  def unit flux as
    unit micromolar;
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // Bulk cytoplasm equations.
  //
  // Catherine Lloyd

  def comp I_CaT as
    // I_CaT
    //
    // T-type calcium current
    var I_CaT: picoampere {pub: out};
    var g_CaT: picosiemens {init: 700.0};
    var ECaT: millivolt {init: 17.0};
    var alpha_OT: first_order_rate_constant {init: 800.0};
    var beta_OT: first_order_rate_constant {init: 72};
    var OCaT: dimensionless {init: 0};
    var time: second {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var dT: dimensionless {priv: in};
    var fT: dimensionless {priv: in};
    I_CaT = g_CaT*OCaT*(Vm-ECaT);
    ode(OCaT, time) = alpha_OT*dT*fT*(1.0{dimensionless}-OCaT)-beta_OT*OCaT;
  enddef;

  def comp I_CaT_d_gate as
    var dT: dimensionless {init: 0.010, pub: out};
    var infinity_dT: dimensionless;
    var tau_dT1: second;
    var A_dT1: second {init: 0.0025};
    var k_dT: per_millivolt {init: -0.60};
    var V_dT: millivolt {init: -53};
    var Vm: millivolt {pub: in};
    var time: second {pub: in};
    infinity_dT = 1.0{dimensionless}/(1.0{dimensionless}+exp(k_dT*(Vm-V_dT)));
    tau_dT1 = A_dT1;
    ode(dT, time) = (infinity_dT-dT)/tau_dT1;
  enddef;

  def comp I_CaT_f_gate as
    var fT: dimensionless {init: 0.001, pub: out};
    var infinity_fT: dimensionless;
    var tau_fT1: second;
    var A_fT1: second {init: 0.019};
    var A_fT2: second {init: 6.75};
    var A_fT3: per_millivolt {init: 2};
    var A_fT4: millivolt {init: -40};
    var k_fT: per_millivolt {init: 1};
    var V_fT: millivolt {init: -65};
    var Vm: millivolt {pub: in};
    var time: second {pub: in};
    infinity_fT = 1.0{dimensionless}/(1.0{dimensionless}+exp(k_fT*(Vm-V_fT)));
    tau_fT1 = A_fT1+(A_fT2-A_fT1)/(1.0{dimensionless}+exp(A_fT3*(Vm-A_fT4)));
    ode(fT, time) = (infinity_fT-fT)/tau_fT1;
  enddef;

  def comp I_CaExt as
    // I_CaExt
    //
    // calcium extrusion current
    var I_CaExt: picoampere {pub: out};
    var gCaExt: femtoampere {init: 100.0};
    var KCaExt: micromolar {init: 1.0};
    var CCy: micromolar {pub: in};
    I_CaExt = gCaExt*(CCy/(KCaExt+CCy));
  enddef;

  def comp I_Kv1_1 as
    // I_Kv1_1
    //
    // voltage-dependent potassium current
    var I_Kv1_1: picoampere {pub: out};
    var g_Kv1_1: picosiemens {init: 10.0};
    var time: second {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var EK: millivolt {pub: in};
    var dv1_1: dimensionless {priv: in};
    var fv1_1: dimensionless {priv: in};
    I_Kv1_1 = g_Kv1_1*dv1_1*fv1_1*(Vm-EK);
  enddef;

  def comp I_Kv1_1_d_gate as
    var dv1_1: dimensionless {init: 0.000, pub: out};
    var alpha_dv1_1: first_order_rate_constant;
    var A_dv1_11: first_order_rate_constant;
    var A_dv1_11a: first_order_rate_constant {init: 0.0};
    var A_dv1_11b: first_order_rate_constant {init: 250.0};
    var A_dv1_11c: per_millivolt {init: -0.077};
    var A_dv1_11d: millivolt {init: -4.8};
    var A_dv1_12: dimensionless {init: 0.80};
    var A_dv1_13: per_millivolt {init: -0.13};
    var A_dv1_14: millivolt {init: -25.0};
    var beta_dv1_1: first_order_rate_constant;
    var Vm: millivolt {pub: in};
    var time: second {pub: in};
    alpha_dv1_1 = A_dv1_11*(A_dv1_12/(1.0{dimensionless}+exp(A_dv1_13*(Vm-A_dv1_14)))+1.0{dimensionless}-A_dv1_12);
    beta_dv1_1 = A_dv1_11*(A_dv1_12-A_dv1_12/(1.0{dimensionless}+exp(A_dv1_13*(Vm-A_dv1_14))));
    A_dv1_11 = A_dv1_11a+(A_dv1_11b-A_dv1_11a)/(1.0{dimensionless}+exp(A_dv1_11c*(Vm-A_dv1_11d)));
    ode(dv1_1, time) = alpha_dv1_1*(1.0{dimensionless}-dv1_1)-beta_dv1_1*dv1_1;
  enddef;

  def comp I_Kv1_1_f_gate as
    var fv1_1: dimensionless {init: 1.0, pub: out};
    var alpha_fv1_1: first_order_rate_constant;
    var A_fv1_11: first_order_rate_constant {init: 333.0};
    var A_fv1_12: dimensionless {init: 0.10};
    var A_fv1_13: per_millivolt {init: 0.23};
    var A_fv1_14: millivolt {init: -44.8};
    var beta_fv1_1: first_order_rate_constant;
    var Vm: millivolt {pub: in};
    var time: second {pub: in};
    alpha_fv1_1 = A_fv1_11*(A_fv1_12/(1.0{dimensionless}+exp(A_fv1_13*(Vm-A_fv1_14)))+1.0{dimensionless}-A_fv1_12);
    beta_fv1_1 = A_fv1_11*(A_fv1_12-A_fv1_12/(1.0{dimensionless}+exp(A_fv1_13*(Vm-A_fv1_14))));
    ode(fv1_1, time) = alpha_fv1_1*(1.0{dimensionless}-fv1_1)-beta_fv1_1*fv1_1;
  enddef;

  def comp I_KERG as
    // I_KERG
    //
    // ERG potassium current
    var I_KERG: picoampere {pub: out};
    var g_KERG: picosiemens {init: 10.0};
    var time: second {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var EK: millivolt {pub: in};
    var dERG: dimensionless {priv: in};
    I_KERG = g_KERG*dERG*(Vm-EK);
  enddef;

  def comp I_KERG_d_gate as
    var dERG: dimensionless {init: 0.000, pub: out};
    var alpha_dERG: first_order_rate_constant;
    var A_dERG1: first_order_rate_constant {init: 1000.0};
    var A_dERG2: dimensionless {init: 0.70};
    var A_dERG3: per_millivolt {init: -0.56};
    var A_dERG4: millivolt {init: 30};
    var beta_dERG: first_order_rate_constant;
    var Vm: millivolt {pub: in};
    var time: second {pub: in};
    alpha_dERG = A_dERG1*(A_dERG2/(1.0{dimensionless}+exp(A_dERG3*(Vm-A_dERG4)))+1.0{dimensionless}-A_dERG2);
    beta_dERG = A_dERG1*(A_dERG2-A_dERG2/(1.0{dimensionless}+exp(A_dERG3*(Vm-A_dERG4))));
    ode(dERG, time) = alpha_dERG*(1.0{dimensionless}-dERG)-beta_dERG*dERG;
  enddef;

  def comp I_KB as
    // I_KB
    //
    // background potassium leakage current
    var I_KB: picoampere {pub: out};
    var g_KB: picosiemens {init: 6.0};
    var EK: millivolt {pub: in};
    var Vm: millivolt {pub: in};
    I_KB = g_KB*(Vm-EK);
  enddef;

  def comp I_Na as
    // I_Na
    //
    // fast sodium current
    var I_Na: picoampere {pub: out};
    var g_Na: picosiemens {init: 2000.0};
    var time: second {pub: in, priv: out};
    var Vm: millivolt {pub: in, priv: out};
    var ENa_Cy: millivolt {pub: in};
    var dNa: dimensionless {priv: in};
    var fNa: dimensionless {priv: in};
    I_Na = g_Na*dNa*fNa*(Vm-ENa_Cy);
  enddef;

  def comp I_Na_d_gate as
    var dNa: dimensionless {init: 0.000, pub: out};
    var alpha_dNa: first_order_rate_constant;
    var A_dNa1: first_order_rate_constant;
    var A_dNa1a: first_order_rate_constant {init: 250.0};
    var A_dNa1b: first_order_rate_constant {init: 1000.0};
    var A_dNa1c: per_millivolt {init: -0.2};
    var A_dNa1d: millivolt {init: -15.0};
    var A_dNa2: dimensionless {init: 1.0};
    var A_dNa3: per_millivolt {init: -0.147};
    var A_dNa4: millivolt {init: -35.3};
    var beta_dNa: first_order_rate_constant;
    var Vm: millivolt {pub: in};
    var time: second {pub: in};
    alpha_dNa = A_dNa1*(A_dNa2/(1.0{dimensionless}+exp(A_dNa3*(Vm-A_dNa4)))+1.0{dimensionless}-A_dNa2);
    beta_dNa = A_dNa1*(A_dNa2-A_dNa2/(1.0{dimensionless}+exp(A_dNa3*(Vm-A_dNa4))));
    A_dNa1 = A_dNa1a+(A_dNa1b-A_dNa1a)/(1.0{dimensionless}+exp(A_dNa1c*(Vm-A_dNa1d)));
    ode(dNa, time) = alpha_dNa*(1.0{dimensionless}-dNa)-beta_dNa*dNa;
  enddef;

  def comp I_Na_f_gate as
    var fNa: dimensionless {init: 0.100, pub: out};
    var alpha_fNa: first_order_rate_constant;
    var A_fNa1: first_order_rate_constant;
    var A_fNa1a: first_order_rate_constant {init: 10.0};
    var A_fNa1b: first_order_rate_constant {init: 50.0};
    var A_fNa1c: per_millivolt {init: -0.036};
    var A_fNa1d: millivolt {init: -38.0};
    var A_fNa2: dimensionless {init: 1.00};
    var A_fNa3: per_millivolt {init: 0.167};
    var A_fNa4: millivolt {init: -83.0};
    var beta_fNa: first_order_rate_constant;
    var Vm: millivolt {pub: in};
    var time: second {pub: in};
    alpha_fNa = A_fNa1*(A_fNa2/(1.0{dimensionless}+exp(A_fNa3*(Vm-A_fNa4)))+1.0{dimensionless}-A_fNa2);
    beta_fNa = A_fNa1*(A_fNa2-A_fNa2/(1.0{dimensionless}+exp(A_fNa3*(Vm-A_fNa4))));
    A_fNa1 = A_fNa1a+(A_fNa1b-A_fNa1a)/(1.0{dimensionless}+exp(A_fNa1c*(Vm-A_fNa1d)));
    ode(fNa, time) = alpha_fNa*(1.0{dimensionless}-fNa)-beta_fNa*fNa;
  enddef;

  def comp I_L as
    // I_L
    //
    // non-specific inward leakage current
    var I_L: picoampere {pub: out};
    var g_L: picosiemens {init: 0.20};
    var EL: millivolt {init: 0.0};
    var Vm: millivolt {pub: in};
    I_L = g_L*(Vm-EL);
  enddef;

  def comp membrane as
    var Vm: millivolt {pub: out, init: -70.0};
    var I_ion_Cy: picoampere;
    var Cm: picofarad {init: 20.0};
    var I_ion_PU1: picoampere {pub: in};
    var I_ion_PU2: picoampere {pub: in};
    var I_ion_PU3: picoampere {pub: in};
    var I_ion_PU4: picoampere {pub: in};
    var I_ion_PU5: picoampere {pub: in};
    var I_ion_PU6: picoampere {pub: in};
    var I_ion_PU7: picoampere {pub: in};
    var I_ion_PU8: picoampere {pub: in};
    var I_ion_PU9: picoampere {pub: in};
    var I_ion_PU10: picoampere {pub: in};
    var I_CaT: picoampere {pub: in};
    var I_CaExt: picoampere {pub: in};
    var I_Kv1_1: picoampere {pub: in};
    var I_KERG: picoampere {pub: in};
    var I_KB: picoampere {pub: in};
    var I_Na: picoampere {pub: in};
    var I_L: picoampere {pub: in};
    var time: second {pub: in};
    ode(Vm, time) = -(1.0{dimensionless}/Cm)*(I_ion_Cy+I_ion_PU1+I_ion_PU2+I_ion_PU3+I_ion_PU4+I_ion_PU5+I_ion_PU6+I_ion_PU7+I_ion_PU8+I_ion_PU9+I_ion_PU10);
    I_ion_Cy = I_CaT+I_CaExt+I_Kv1_1+I_KERG+I_KB+I_Na+I_L;
  enddef;

  def comp Nerst_potentials as
    // Nerst_potentials
    //
    // Nerst potentials
    var ECa_Cy: millivolt {pub: out};
    var ENa_Cy: millivolt {pub: out};
    var EK: millivolt {pub: out};
    var Vm: millivolt {pub: in};
    var T: kelvin {pub: in};
    var R: attojoule_per_zeptomole_kelvin {pub: in};
    var F: femtocoulomb_per_zeptomole {pub: in};
    var CO: micromolar {pub: in};
    var CCy: micromolar {pub: in};
    var KO: micromolar {pub: in};
    var Ki: micromolar {pub: in};
    var NO: micromolar {pub: in};
    var Ni: micromolar {pub: in};
    ECa_Cy = R*T/(2.0{dimensionless}*F)*ln(CO/CCy);
    ENa_Cy = R*T/F*ln(NO/Ni);
    EK = R*T/F*ln(KO/Ki);
  enddef;

  def comp CCy as
    // CCy
    //
    // bulk cytoplasmic calcium
    var CCy: micromolar {init: 0.12, pub: out};
    var lambda_S2_Cy: dimensionless {init: 1.0E-3};
    var delta_SCy: micromolar_per_coulomb {init: 0.002};
    var JCy: flux {pub: in};
    var JS2Cy1: flux {pub: in};
    var JS2Cy2: flux {pub: in};
    var JS2Cy3: flux {pub: in};
    var JS2Cy4: flux {pub: in};
    var JS2Cy5: flux {pub: in};
    var JS2Cy6: flux {pub: in};
    var JS2Cy7: flux {pub: in};
    var JS2Cy8: flux {pub: in};
    var JS2Cy9: flux {pub: in};
    var JS2Cy10: flux {pub: in};
    var I_CaT: picoampere {pub: in};
    var I_CaExt: picoampere {pub: in};
    var time: second {pub: in};
    ode(CCy, time) = JCy-(lambda_S2_Cy*JS2Cy1+lambda_S2_Cy*JS2Cy2+lambda_S2_Cy*JS2Cy3+lambda_S2_Cy*JS2Cy4+lambda_S2_Cy*JS2Cy5+lambda_S2_Cy*JS2Cy6+lambda_S2_Cy*JS2Cy7+lambda_S2_Cy*JS2Cy8+lambda_S2_Cy*JS2Cy9+lambda_S2_Cy*JS2Cy10+delta_SCy/2.0{dimensionless}*(I_CaT+I_CaExt));
  enddef;
  // Calcium flux which occurs between the pacemaker unit(s) and the bulk cytosol. The value of mu_S2Cy is imported from the "model_parameters" component of the main model.
  //
  // Catherine Lloyd

  def comp JS2Cy as
    // JS2Cy
    //
    // inter-cytoplasmic-pacemaker unit Ca2+ flux
    var JS2Cy1: flux {pub: out};
    var JS2Cy2: flux {pub: out};
    var JS2Cy3: flux {pub: out};
    var JS2Cy4: flux {pub: out};
    var JS2Cy5: flux {pub: out};
    var JS2Cy6: flux {pub: out};
    var JS2Cy7: flux {pub: out};
    var JS2Cy8: flux {pub: out};
    var JS2Cy9: flux {pub: out};
    var JS2Cy10: flux {pub: out};
    var mu_S2Cy1: first_order_rate_constant {init: 0.000};
    var mu_S2Cy2: first_order_rate_constant {init: 0.3361};
    var mu_S2Cy3: first_order_rate_constant {init: 0.3658};
    var mu_S2Cy4: first_order_rate_constant {init: 0.4357};
    var mu_S2Cy5: first_order_rate_constant {init: 0.5351};
    var mu_S2Cy6: first_order_rate_constant {init: 0.6366};
    var mu_S2Cy7: first_order_rate_constant {init: 0.7386};
    var mu_S2Cy8: first_order_rate_constant {init: 0.8361};
    var mu_S2Cy9: first_order_rate_constant {init: 0.9320};
    var mu_S2Cy10: first_order_rate_constant {init: 1.0185};
    var CCy: micromolar {pub: in};
    var CS21: micromolar {pub: in};
    var CS22: micromolar {pub: in};
    var CS23: micromolar {pub: in};
    var CS24: micromolar {pub: in};
    var CS25: micromolar {pub: in};
    var CS26: micromolar {pub: in};
    var CS27: micromolar {pub: in};
    var CS28: micromolar {pub: in};
    var CS29: micromolar {pub: in};
    var CS210: micromolar {pub: in};
    JS2Cy1 = mu_S2Cy1*(CCy-CS21);
    JS2Cy2 = mu_S2Cy2*(CCy-CS22);
    JS2Cy3 = mu_S2Cy3*(CCy-CS23);
    JS2Cy4 = mu_S2Cy4*(CCy-CS24);
    JS2Cy5 = mu_S2Cy5*(CCy-CS25);
    JS2Cy6 = mu_S2Cy6*(CCy-CS26);
    JS2Cy7 = mu_S2Cy7*(CCy-CS27);
    JS2Cy8 = mu_S2Cy8*(CCy-CS28);
    JS2Cy9 = mu_S2Cy9*(CCy-CS29);
    JS2Cy10 = mu_S2Cy10*(CCy-CS210);
  enddef;
  // Calcium flux which occurs between the two subspaces of a pacemaker unit. Heterogeneity between pacemaker units means this flux is defined 7 times, once per pacemaker unit.
  //
  // Catherine Lloyd

  def comp JS1S2 as
    // JS1S2
    //
    // inter-subspace Ca2+ flux
    var JS1S2_1: flux {pub: out};
    var JS1S2_2: flux {pub: out};
    var JS1S2_3: flux {pub: out};
    var JS1S2_4: flux {pub: out};
    var JS1S2_5: flux {pub: out};
    var JS1S2_6: flux {pub: out};
    var JS1S2_7: flux {pub: out};
    var JS1S2_8: flux {pub: out};
    var JS1S2_9: flux {pub: out};
    var JS1S2_10: flux {pub: out};
    var mu_S1S2_1: first_order_rate_constant;
    var mu_S1S2_2: first_order_rate_constant;
    var mu_S1S2_3: first_order_rate_constant;
    var mu_S1S2_4: first_order_rate_constant;
    var mu_S1S2_5: first_order_rate_constant;
    var mu_S1S2_6: first_order_rate_constant;
    var mu_S1S2_7: first_order_rate_constant;
    var mu_S1S2_8: first_order_rate_constant;
    var mu_S1S2_9: first_order_rate_constant;
    var mu_S1S2_10: first_order_rate_constant;
    var mu_A: first_order_rate_constant {init: 0.30};
    var mu_B: first_order_rate_constant {init: 0.24};
    var n_PU: dimensionless {pub: in};
    var CS11: micromolar {pub: in};
    var CS12: micromolar {pub: in};
    var CS13: micromolar {pub: in};
    var CS14: micromolar {pub: in};
    var CS15: micromolar {pub: in};
    var CS16: micromolar {pub: in};
    var CS17: micromolar {pub: in};
    var CS18: micromolar {pub: in};
    var CS19: micromolar {pub: in};
    var CS110: micromolar {pub: in};
    var CS21: micromolar {pub: in};
    var CS22: micromolar {pub: in};
    var CS23: micromolar {pub: in};
    var CS24: micromolar {pub: in};
    var CS25: micromolar {pub: in};
    var CS26: micromolar {pub: in};
    var CS27: micromolar {pub: in};
    var CS28: micromolar {pub: in};
    var CS29: micromolar {pub: in};
    var CS210: micromolar {pub: in};
    JS1S2_1 = mu_S1S2_1*(CS21-CS11);
    JS1S2_2 = mu_S1S2_2*(CS22-CS12);
    JS1S2_3 = mu_S1S2_3*(CS23-CS13);
    JS1S2_4 = mu_S1S2_4*(CS24-CS14);
    JS1S2_5 = mu_S1S2_5*(CS25-CS15);
    JS1S2_6 = mu_S1S2_6*(CS26-CS16);
    JS1S2_7 = mu_S1S2_7*(CS27-CS17);
    JS1S2_8 = mu_S1S2_8*(CS28-CS18);
    JS1S2_9 = mu_S1S2_9*(CS29-CS19);
    JS1S2_10 = mu_S1S2_10*(CS210-CS110);
    mu_S1S2_1 = mu_A+(mu_B-mu_A)*((1{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
    mu_S1S2_2 = mu_A+(mu_B-mu_A)*((2{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
    mu_S1S2_3 = mu_A+(mu_B-mu_A)*((3{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
    mu_S1S2_4 = mu_A+(mu_B-mu_A)*((4{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
    mu_S1S2_5 = mu_A+(mu_B-mu_A)*((5{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
    mu_S1S2_6 = mu_A+(mu_B-mu_A)*((6{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
    mu_S1S2_7 = mu_A+(mu_B-mu_A)*((7{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
    mu_S1S2_8 = mu_A+(mu_B-mu_A)*((8{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
    mu_S1S2_9 = mu_A+(mu_B-mu_A)*((9{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
    mu_S1S2_10 = mu_A+(mu_B-mu_A)*((10{dimensionless}-1{dimensionless})/(n_PU-1{dimensionless}));
  enddef;
  // Calcium flux which occurs within the bulk cytosol.
  //
  // Catherine Lloyd

  def comp JCy as
    // JCy
    //
    // intracellular Ca2+ flux
    var JCy: flux {pub: out};
    var mu_Cy: first_order_rate_constant {init: 1.30};
    var C_infinity: micromolar {init: 0.12};
    var CCy: micromolar {pub: in};
    JCy = mu_Cy*(C_infinity-CCy);
  enddef;

  def comp model_parameters as
    var R: attojoule_per_zeptomole_kelvin {pub: out, init: 8.314E-3};
    var F: femtocoulomb_per_zeptomole {pub: out, init: 0.09649};
    var T: kelvin {pub: out, init: 310.16};
    var CO: micromolar {pub: out, init: 1.8E3};
    var KO: micromolar {pub: out, init: 5400.0};
    var Ki: micromolar {pub: out, init: 145E3};
    var NO: micromolar {pub: out, init: 140E3};
    var Ni: micromolar {pub: out, init: 10E3};
    var P: micromolar {pub: out, init: 1.0};
    var n_PU: dimensionless {pub: out, init: 10.0};
  enddef;

  def group as encapsulation for
    comp I_CaT incl
      comp I_CaT_d_gate;
      comp I_CaT_f_gate;
    endcomp;
    comp I_Kv1_1 incl
      comp I_Kv1_1_d_gate;
      comp I_Kv1_1_f_gate;
    endcomp;
    comp I_KERG incl
      comp I_KERG_d_gate;
    endcomp;
    comp I_Na incl
      comp I_Na_d_gate;
      comp I_Na_f_gate;
    endcomp;
  enddef;
  // The connections between the main components of the bulk cytoplasm model .
  //
  // Catherine Lloyd
  def map between I_CaT and environment for
    vars time and time;
  enddef;
  def map between I_Kv1_1 and environment for
    vars time and time;
  enddef;
  def map between I_KERG and environment for
    vars time and time;
  enddef;
  def map between I_Na and environment for
    vars time and time;
  enddef;
  def map between CCy and environment for
    vars time and time;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between membrane and I_CaT for
    vars Vm and Vm;
    vars I_CaT and I_CaT;
  enddef;
  def map between membrane and I_CaExt for
    vars I_CaExt and I_CaExt;
  enddef;
  def map between membrane and I_Kv1_1 for
    vars Vm and Vm;
    vars I_Kv1_1 and I_Kv1_1;
  enddef;
  def map between membrane and I_KERG for
    vars Vm and Vm;
    vars I_KERG and I_KERG;
  enddef;
  def map between membrane and I_KB for
    vars Vm and Vm;
    vars I_KB and I_KB;
  enddef;
  def map between membrane and I_Na for
    vars Vm and Vm;
    vars I_Na and I_Na;
  enddef;
  def map between membrane and I_L for
    vars Vm and Vm;
    vars I_L and I_L;
  enddef;
  def map between I_CaExt and CCy for
    vars CCy and CCy;
    vars I_CaExt and I_CaExt;
  enddef;
  def map between I_Kv1_1 and Nerst_potentials for
    vars EK and EK;
  enddef;
  def map between I_KB and Nerst_potentials for
    vars EK and EK;
  enddef;
  def map between I_KERG and Nerst_potentials for
    vars EK and EK;
  enddef;
  def map between I_Na and Nerst_potentials for
    vars ENa_Cy and ENa_Cy;
  enddef;
  def map between Nerst_potentials and membrane for
    vars Vm and Vm;
  enddef;
  def map between Nerst_potentials and model_parameters for
    vars R and R;
    vars T and T;
    vars F and F;
    vars CO and CO;
    vars Ki and Ki;
    vars KO and KO;
    vars Ni and Ni;
    vars NO and NO;
  enddef;
  def map between Nerst_potentials and CCy for
    vars CCy and CCy;
  enddef;
  def map between JCy and CCy for
    vars CCy and CCy;
    vars JCy and JCy;
  enddef;
  def map between JS2Cy and CCy for
    vars CCy and CCy;
    vars JS2Cy1 and JS2Cy1;
    vars JS2Cy2 and JS2Cy2;
    vars JS2Cy3 and JS2Cy3;
    vars JS2Cy4 and JS2Cy4;
    vars JS2Cy5 and JS2Cy5;
    vars JS2Cy6 and JS2Cy6;
    vars JS2Cy7 and JS2Cy7;
    vars JS2Cy8 and JS2Cy8;
    vars JS2Cy9 and JS2Cy9;
    vars JS2Cy10 and JS2Cy10;
  enddef;
  def map between JS1S2 and model_parameters for
    vars n_PU and n_PU;
  enddef;
  def map between CCy and I_CaT for
    vars I_CaT and I_CaT;
  enddef;
  // The connections between the ion channels and their encapsulated gates.
  //
  // Catherine Lloyd
  def map between I_CaT and I_CaT_d_gate for
    vars Vm and Vm;
    vars time and time;
    vars dT and dT;
  enddef;
  def map between I_CaT and I_CaT_f_gate for
    vars Vm and Vm;
    vars time and time;
    vars fT and fT;
  enddef;
  def map between I_Kv1_1 and I_Kv1_1_d_gate for
    vars Vm and Vm;
    vars time and time;
    vars dv1_1 and dv1_1;
  enddef;
  def map between I_Kv1_1 and I_Kv1_1_f_gate for
    vars Vm and Vm;
    vars time and time;
    vars fv1_1 and fv1_1;
  enddef;
  def map between I_KERG and I_KERG_d_gate for
    vars Vm and Vm;
    vars time and time;
    vars dERG and dERG;
  enddef;
  def map between I_Na and I_Na_d_gate for
    vars Vm and Vm;
    vars time and time;
    vars dNa and dNa;
  enddef;
  def map between I_Na and I_Na_f_gate for
    vars Vm and Vm;
    vars time and time;
    vars fNa and fNa;
  enddef;
enddef;
