<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.1#" cmeta:id="garmendiatorres_2007_1.1model" name="garmendiatorres_2007_1.1model">
	<!-- documentation -->
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Nucleocytoplasmic oscillations of the yeast transcription factor Msn2: evidence for periodic PKA activation</title>
				<author>
					<firstname>Mona</firstname>
					<surname>Zhu</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>This model has been built using the expressions found in the supplemental data of Garmendia-Torres's 2007 paper on oscillations of Msn2 due to PKA activation.The model is a 1.1 modification of the orignal 1.0 model; it uses imports that are reusable in defining equations in the model. This model reproduces the curves on Figure 3, page 1047, using the corresponding initial values and the parameters found in Table S2. The variable Str has been given a value of 1 in order to show oscillatory behavior but may be changed to 0 or 2.5 for low and high values. This file is known to run in OpenCell only.</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>At intermediate intensities, stress induces oscillations in the nucleocytoplasmic shuttling of the transcription factor Msn2 in budding yeast. Activation by stress results in a reversible translocation of Msn2 from the cytoplasm to the nucleus. This translocation is negatively controlled by the cAMP-PKA pathway through Msn2 phosphorylation. Here we show that the nuclear localization signal (NLS) of Msn2 is necessary and sufficient to promote the nucleocytoplasmic oscillations of the transcription factor. Because the NLS is controlled by protein kinase A (PKA) phosphorylation, we use a computational model to investigate the possibility that the cAMP-PKA pathway could function as an oscillator driving the periodic shuttling of Msn2. The model indicates that sustained oscillations of cAMP can indeed occur in a range bounded by two critical values of stress intensity, owing to the negative feedback exerted by PKA on cAMP accumulation. We verify the predictions of the model in mutants by showing that suppressing this negative-feedback loop prevents the oscillatory shuttling but still promotes the stress-induced nuclear localization of Msn2. The physiological significance of Msn2 oscillations is discussed in the light of the frequency encoding of cellular rhythms.</para>
				<para>Nucleocytoplasmic oscillations of the yeast transcription factor Msn2: evidence for periodic PKA activation, Garmendia-Torres C, Goldbeter A, Jacquet M <emphasis>Current Biology</emphasis>, 17, 1044-1049<ulink url="http://www.ncbi.nlm.nih.gov/pubmed/17570669">PubMed ID: 17570669</ulink>
				</para>
				<informalfigure float="0" id="______">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>Model Diagram</title>
							</objectinfo>
							<imagedata fileref="garmendiatorres_2007.png"/>
						</imageobject>
					</mediaobject>
					<caption>(A) Time evolution of RGTP, cAMP, active PKA, and nuclear Msn2 predicted by the model for three different values of Str, the dimensionless parameter measuring stress intensity. At low value, Str = 0 (dotted blue curves), and at high value, Str = 2.5 (dotted red curves), a steady-state level is observed for the different components, whereas at intermediate value, Str = 1 (green curves), sustained oscillations occur. The curves show the oscillatory behavior after the elimination of transients. (B) Envelope of cAMP oscillations as a function of stress intensity showing the maximum (red curve) and the minimum (blue curve) values during sustained oscillations. The variation of periodicity (green dots) is also shown. (C) Envelope of oscillations in Msn2 subcellular localization. The curves show the maximumvalues (Max) and minimum values (Min) for cytoplasmic Msn2 (in blue) and nuclear Msn2 (in red). Outside of the oscillatory range, the system reaches a stable steady state. The curves have been obtained with the Berkeley Madonna program, by numerical integration of Equations S1-S4. Parameter values are given in Table S2. Initial conditions were as follows: GEFa 0.36, GAPa 0.5, RGTP 0.1, CYCLa 0.1, cAMP 1, R2C2 0.5,MC 0.25, MN 0.25, MCP 0.25, MNP 0.25, and PDEa 0.5.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>

   <!-- units -->
   <units name="minute">
      <unit multiplier="60" units="second"/>
   </units>
   <units name="per_minute">
      <unit exponent="-1" units="minute"/>
   </units>
   <units name="per_litre">
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="micromolar">
      <unit prefix="micro" units="mole"/>
      <unit units="per_litre"/>
   </units>
   <units name="micromolar_per_minute">
      <unit units="micromolar"/>
      <unit units="per_minute"/>
   </units>
   <units name="per_micromolar_minute">
      <unit exponent="-1" units="micromolar"/>
      <unit units="per_minute"/>
   </units>
   <units name="per_micromolar_squared_minute">
      <unit exponent="-2" units="micromolar"/>
      <unit units="per_minute"/>
   </units>
   <units name="per_micromolar_squared">
      <unit exponent="-2" units="micromolar"/>
   </units>
   
   <!-- components -->
   <component name="interface">
      <variable name="GEFa" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.36" name="GEFa_init" public_interface="out" units="dimensionless"/>
      <variable name="GAPa" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.5" name="GAPa_init" public_interface="out" units="dimensionless"/>
      <variable name="RGTP" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.1" name="RGTP_init" private_interface="out" public_interface="out" units="dimensionless"/>
      <variable name="CYCLa" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.1" name="CYCLa_init" public_interface="out" units="dimensionless"/>
      <variable name="PDEa" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.5" name="PDEa_init" public_interface="out" units="dimensionless"/>
      <variable name="cAMP" public_interface="in" units="dimensionless"/>
      <variable initial_value="1" name="cAMP_init" private_interface="out" public_interface="out" units="dimensionless"/>
      <variable name="R2C2" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.5" name="R2C2_init" private_interface="out" public_interface="out" units="dimensionless"/>
      <variable name="MC" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.25" name="MC_init" public_interface="out" units="dimensionless"/>
      <variable name="MN" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.25" name="MN_init" public_interface="out" units="dimensionless"/>
      <variable name="MNP" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.25" name="MNP_init" public_interface="out" units="dimensionless"/>
      <variable name="MCP" public_interface="in" units="dimensionless"/>
      <variable initial_value="0.25" name="MCP_init" public_interface="out" units="dimensionless"/>
      <variable name="time" private_interface="out" public_interface="out" units="minute"/>
      <variable initial_value="1" name="Str" private_interface="out" public_interface="out" units="dimensionless"/>
      <variable name="V_1" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_2" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_3" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_4" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_5" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_6" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_7" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_8" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_9" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_10" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_11" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_12" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="V_PKAact" private_interface="in" public_interface="out" units="per_minute"/>
      <variable name="R2cAMP2" private_interface="in" public_interface="out" units="dimensionless"/>
      <variable name="C" private_interface="in" public_interface="out" units="dimensionless"/>
      <variable initial_value="1" name="v_max1" private_interface="out" units="micromolar_per_minute"/>
      <variable initial_value="1" name="v_max2" private_interface="out" units="micromolar_per_minute"/>
      <variable initial_value="1.3" name="v_max4" private_interface="out" units="micromolar_per_minute"/>
      <variable initial_value="1.5" name="v_max8" private_interface="out" units="micromolar_per_minute"/>
      <variable initial_value="0.6" name="v_max10" private_interface="out" units="micromolar_per_minute"/>
      <variable initial_value="2" name="v_max12" private_interface="out" units="micromolar_per_minute"/>
      <variable initial_value="4" name="GEFt" private_interface="out" public_interface="out" units="micromolar"/>
      <variable initial_value="1.5" name="GAPt" private_interface="out" public_interface="out" units="micromolar"/>
      <variable initial_value="0.3" name="PKAt" private_interface="out" public_interface="out" units="micromolar"/>
      <variable initial_value="250" name="RASt" private_interface="out" public_interface="out" units="micromolar"/>
      <variable initial_value="0.5" name="PDEt" private_interface="out" public_interface="out" units="micromolar"/>
      <variable initial_value="1" name="MSNt" private_interface="out" public_interface="out" units="micromolar"/>
      <variable initial_value="3.5" name="k_c3" private_interface="out" units="per_minute"/>
      <variable initial_value="240" name="k_gef" private_interface="out" units="per_minute"/>
      <variable initial_value="600" name="k_gap" private_interface="out" units="per_minute"/>
      <variable initial_value="3.333" name="k_c7" private_interface="out" units="per_minute"/>
      <variable initial_value="3.333" name="k_c9" private_interface="out" units="per_minute"/>
      <variable initial_value="3.333" name="k_c11" private_interface="out" units="per_minute"/>
      <variable initial_value="0.01" name="k_a" public_interface="out" units="per_micromolar_minute"/>
      <variable initial_value="1" name="k_i" public_interface="out" units="per_minute"/>
      <variable initial_value="4" name="k_s" public_interface="out" units="per_minute"/>
      <variable initial_value="100" name="k_d" public_interface="out" units="per_minute"/>
      <variable initial_value="10" name="k_t1" public_interface="out" units="per_minute"/>
      <variable initial_value="0.001" name="k_t2" public_interface="out" units="per_minute"/>
      <variable initial_value="0.001" name="k_t3" public_interface="out" units="per_minute"/>
      <variable initial_value="10" name="k_t4" public_interface="out" units="per_minute"/>
      <variable initial_value="0.05" name="K_1" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.05" name="K_2" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.01" name="K_3" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.01" name="K_4" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.001" name="K_5" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.001" name="K_6" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.01" name="K_7" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.01" name="K_8" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.05" name="K_9" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.05" name="K_10" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.05" name="K_11" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.05" name="K_12" public_interface="out" units="dimensionless"/>
      <variable initial_value="20" name="K_md" public_interface="out" units="micromolar"/>
      <variable initial_value="1" name="a" private_interface="out" public_interface="out" units="per_micromolar_squared_minute"/>
      <variable initial_value="1" name="r" private_interface="out" public_interface="out" units="per_minute"/>
      <variable name="M_cyto" public_interface="in" units="dimensionless"/>
      <variable name="M_nucl" public_interface="in" units="dimensionless"/>
      <variable initial_value="1" name="one" private_interface="out" public_interface="out" units="dimensionless"/>
      <variable initial_value="0.7" name="CYCLt" public_interface="out" units="micromolar"/>
	  <variable initial_value="2" name="two" private_interface="out" public_interface="out" units="dimensionless"/>
	  <variable initial_value="1" name="one_mM" private_interface="out" units="micromolar"/>
	  <variable initial_value="1" name="one_pm" private_interface="out" units="per_minute"/>
	  <variable initial_value="1" name="one_mMpm" private_interface="out" units="micromolar_per_minute"/>
   </component>
   <component name="adenylate_cyclase">
      <variable initial_value="CYCLa_init" name="CYCLa" public_interface="out" units="dimensionless"/>
      <variable name="CYCLa_init" public_interface="in" units="dimensionless"/>
      <variable name="RGTP" public_interface="in" units="dimensionless"/>
	  <variable name="RASt" public_interface="in" units="micromolar"/>
	  <variable name="k_a" public_interface="in" units="per_micromolar_minute"/>
	  <variable name="k_i" public_interface="in" units="per_minute"/>
	  <variable name="time" public_interface="in" units="minute"/>
	  <variable name="one" public_interface="in" units="dimensionless"/>
	  <math xmlns="http://www.w3.org/1998/Math/MathML">
		<apply>
			<eq/>
			<apply>
				<diff/>
				<bvar>
				<ci>time</ci>
				</bvar>
				<ci>CYCLa</ci>
			</apply>
			<apply>
				<minus/>
				<apply>
					<times/>
					<ci>k_a</ci>
					<ci>RGTP</ci>
					<ci>RASt</ci>
					<apply>
						<minus/>
						<ci>one</ci>
						<ci>CYCLa</ci>
					</apply>
				</apply>
				<apply>
					<times/>
					<ci>k_i</ci>
					<ci>CYCLa</ci>
				</apply>
			</apply>
		</apply>
	  </math>
   </component>
	<component name="cyclic_AMP">
		<variable initial_value="cAMP_init" name="cAMP" private_interface="out" public_interface="out" units="dimensionless"/>
		<variable name="cAMP_init" public_interface="in" units="dimensionless"/>
		<variable name="time" public_interface="in" units="minute"/>
		<variable name="CYCLa" public_interface="in" units="dimensionless"/>
		<variable name="CYCLt" public_interface="in" units="micromolar"/>
		<variable name="PDEt" public_interface="in" units="micromolar"/>
		<variable name="PDEa" public_interface="in" units="dimensionless"/>
		<variable name="PKAt" public_interface="in" units="micromolar"/>
		<variable name="k_s" public_interface="in" units="per_minute"/>
		<variable name="k_d" public_interface="in" units="per_minute"/>
		<variable name="K_md" public_interface="in" units="micromolar"/>
		<variable name="V_PKAact" public_interface="in" units="per_minute"/>
		<variable name="two" public_interface="in" units="dimensionless"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
					<ci>time</ci>
					</bvar>
					<ci>cAMP</ci>
				</apply>
				<apply>
					<minus/>
					<apply>
						<minus/>
						<apply>
							<times/>
							<ci>k_s</ci>
							<ci>CYCLa</ci>
							<ci>CYCLt</ci>
						</apply>
						<apply>
							<times/>
							<ci>k_d</ci>
							<ci>PDEt</ci>
							<ci>PDEa</ci>
							<apply>
								<divide/>
								<ci>cAMP</ci>
								<apply>
									<plus/>
									<ci>K_md</ci>
									<ci>cAMP</ci>
								</apply>
							</apply>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>two</ci>
						<ci>V_PKAact</ci>
						<ci>PKAt</ci>
					</apply>
				</apply>
			</apply>
		</math>
	</component>
	<component name="holoenzyme_R_C">
		<variable initial_value="R2C2_init" name="R2C2" private_interface="out" public_interface="out" units="dimensionless"/>
		<variable name="R2C2_init" public_interface="in" units="dimensionless"/>
		<variable name="time" public_interface="in" units="minute"/>
		<variable name="cAMP" public_interface="in" units="dimensionless"/>
		<variable name="R2cAMP2" public_interface="in" units="dimensionless"/>
		<variable name="PKAt" public_interface="in" units="micromolar"/>
		<variable name="C" public_interface="in" units="dimensionless"/>
		<variable name="a" public_interface="in" units="per_micromolar_squared_minute"/>
		<variable name="r" public_interface="in" units="per_minute"/>
		<variable name="two" public_interface="in" units="dimensionless"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<apply>
					<diff/>
					<bvar>
					<ci>time</ci>
					</bvar>
					<ci>R2C2</ci>
				</apply>
				<apply>
					<plus/>
					<apply>
						<times/>
						<apply>
							<minus/>
							<ci>a</ci>
						</apply>
						<ci>R2C2</ci>
						<apply>
							<power/>
							<ci>cAMP</ci>
							<ci>two</ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>r</ci>
						<apply>
							<power/>
							<ci>C</ci>
							<ci>two</ci>
						</apply>
						<ci>R2cAMP2</ci>
						<apply>
							<power/>
							<ci>PKAt</ci>
							<ci>two</ci>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>
	<component name="VPKAact">
		<variable name="V_PKAact" public_interface="out" units="per_minute"/>
		<variable name="R2C2" public_interface="in" units="dimensionless"/>
		<variable name="time" public_interface="in" units="minute"/>
		<variable name="cAMP" public_interface="in" units="dimensionless"/>
		<variable name="R2cAMP2" public_interface="in" units="dimensionless"/>
		<variable name="PKAt" public_interface="in" units="micromolar"/>
		<variable name="C" public_interface="in" units="dimensionless"/>
		<variable name="a" public_interface="in" units="per_micromolar_squared_minute"/>
		<variable name="r" public_interface="in" units="per_minute"/>
		<variable name="two" public_interface="in" units="dimensionless"/>
		<math xmlns="http://www.w3.org/1998/Math/MathML">
			<apply>
				<eq/>
				<ci>V_PKAact</ci>
				<apply>
					<minus/>
					<apply>
						<times/>
						<ci>a</ci>
						<ci>R2C2</ci>
						<apply>
							<power/>
							<ci>cAMP</ci>
							<ci>two</ci>
						</apply>
					</apply>
					<apply>
						<times/>
						<ci>r</ci>
						<apply>
							<power/>
							<ci>C</ci>
							<ci>two</ci>
						</apply>
						<ci>R2cAMP2</ci>
						<apply>
							<power/>
							<ci>PKAt</ci>
							<ci>two</ci>
						</apply>
					</apply>
				</apply>
			</apply>
		</math>
	</component>

	<!-- groups -->
	<group>
		<relationship_ref relationship="encapsulation"/>
			<component_ref component="interface">
				<component_ref component="VPKAact"/>
				<component_ref component="V1"/>
				<component_ref component="V2"/>
				<component_ref component="V3"/>
				<component_ref component="V4"/>
				<component_ref component="V5"/>
				<component_ref component="V6"/>
				<component_ref component="V7"/>
				<component_ref component="V8"/>
				<component_ref component="V9"/>
				<component_ref component="V10"/>
				<component_ref component="V11"/>
				<component_ref component="V12"/>
				<component_ref component="R2cAMP2"/>
				<component_ref component="C_subunit"/>
			</component_ref>
	</group>
	
	<!-- connections -->
	<connection>
		<map_components component_1="interface" component_2="adenylate_cyclase"/>
		<map_variables variable_1="CYCLa" variable_2="CYCLa"/>
		<map_variables variable_1="CYCLa_init" variable_2="CYCLa_init"/>
		<map_variables variable_1="RASt" variable_2="RASt"/>
		<map_variables variable_1="k_a" variable_2="k_a"/>
		<map_variables variable_1="k_i" variable_2="k_i"/>
		<map_variables variable_1="time" variable_2="time"/>
		<map_variables variable_1="one" variable_2="one"/>
	</connection>
	<connection>
		<map_components component_1="cyclic_AMP" component_2="interface"/>
		<map_variables variable_1="cAMP" variable_2="cAMP"/>
		<map_variables variable_1="cAMP_init" variable_2="cAMP_init"/>
		<map_variables variable_1="time" variable_2="time"/>
		<map_variables variable_1="CYCLt" variable_2="CYCLt"/>
		<map_variables variable_1="PDEt" variable_2="PDEt"/>
		<map_variables variable_1="PKAt" variable_2="PKAt"/>
		<map_variables variable_1="k_s" variable_2="k_s"/>
		<map_variables variable_1="k_d" variable_2="k_d"/>
		<map_variables variable_1="K_md" variable_2="K_md"/>
		<map_variables variable_1="V_PKAact" variable_2="V_PKAact"/>
		<map_variables variable_1="two" variable_2="two"/>
	</connection>
	<connection>
		<map_components component_1="holoenzyme_R_C" component_2="interface"/>
		<map_variables variable_1="R2C2" variable_2="R2C2"/>
		<map_variables variable_1="R2C2_init" variable_2="R2C2_init"/>
		<map_variables variable_1="time" variable_2="time"/>
		<map_variables variable_1="R2cAMP2" variable_2="R2cAMP2"/>
		<map_variables variable_1="PKAt" variable_2="PKAt"/>
		<map_variables variable_1="C" variable_2="C"/>
		<map_variables variable_1="a" variable_2="a"/>
		<map_variables variable_1="r" variable_2="r"/>
		<map_variables variable_1="two" variable_2="two"/>
	</connection>
	<connection>
		<map_components component_1="VPKAact" component_2="interface"/>
		<map_variables variable_1="V_PKAact" variable_2="V_PKAact"/>
		<map_variables variable_1="time" variable_2="time"/>
		<map_variables variable_1="PKAt" variable_2="PKAt"/>
		<map_variables variable_1="a" variable_2="a"/>
		<map_variables variable_1="r" variable_2="r"/>
		<map_variables variable_1="two" variable_2="two"/>
	</connection>
	<connection>
		<map_components component_1="M_cyto" component_2="interface"/>
		<map_variables variable_1="M" variable_2="M_cyto"/>
		<map_variables variable_1="A" variable_2="MC_init"/>
		<map_variables variable_1="B" variable_2="MCP_init"/>
	</connection>
	<connection>
		<map_components component_1="M_nucl" component_2="interface"/>
		<map_variables variable_1="M" variable_2="M_nucl"/>
		<map_variables variable_1="A" variable_2="MN_init"/>
		<map_variables variable_1="B" variable_2="MNP_init"/>
	</connection>
	<connection>
		<map_components component_1="cytosol" component_2="interface"/>
		<map_variables variable_1="y" variable_2="MC"/>
		<map_variables variable_1="t" variable_2="time"/>
		<map_variables variable_1="ka" variable_2="k_t2"/>
		<map_variables variable_1="kb" variable_2="k_t1"/>
		<map_variables variable_1="Vc" variable_2="V_12"/>
		<map_variables variable_1="Vd" variable_2="V_11"/>
		<map_variables variable_1="C" variable_2="one"/>
		<map_variables variable_1="D" variable_2="C"/>
		<map_variables variable_1="Kc" variable_2="K_12"/>
		<map_variables variable_1="Kd" variable_2="K_11"/>
		<map_variables variable_1="y_init" variable_2="MC_init"/>
	</connection>
	<connection>
		<map_components component_1="nucleus" component_2="interface"/>
		<map_variables variable_1="y" variable_2="MN"/>
		<map_variables variable_1="t" variable_2="time"/>
		<map_variables variable_1="ka" variable_2="k_t1"/>
		<map_variables variable_1="kb" variable_2="k_t2"/>
		<map_variables variable_1="Vc" variable_2="V_10"/>
		<map_variables variable_1="Vd" variable_2="V_9"/>
		<map_variables variable_1="C" variable_2="one"/>
		<map_variables variable_1="D" variable_2="C"/>
		<map_variables variable_1="Kc" variable_2="K_10"/>
		<map_variables variable_1="Kd" variable_2="K_9"/>
		<map_variables variable_1="y_init" variable_2="MN_init"/>
	</connection>
	<connection>
		<map_components component_1="nucleus_phos" component_2="interface"/>
		<map_variables variable_1="y" variable_2="MNP"/>
		<map_variables variable_1="t" variable_2="time"/>
		<map_variables variable_1="ka" variable_2="k_t3"/>
		<map_variables variable_1="kb" variable_2="k_t4"/>
		<map_variables variable_1="Vc" variable_2="V_9"/>
		<map_variables variable_1="Vd" variable_2="V_10"/>
		<map_variables variable_1="Kc" variable_2="K_9"/>
		<map_variables variable_1="Kd" variable_2="K_10"/>
		<map_variables variable_1="C" variable_2="C"/>
		<map_variables variable_1="D" variable_2="one"/>
		<map_variables variable_1="y_init" variable_2="MNP_init"/>
	</connection>
	<connection>
		<map_components component_1="cytosol_phos" component_2="interface"/>
		<map_variables variable_1="y" variable_2="MCP"/>
		<map_variables variable_1="t" variable_2="time"/>
		<map_variables variable_1="ka" variable_2="k_t4"/>
		<map_variables variable_1="kb" variable_2="k_t3"/>
		<map_variables variable_1="Vc" variable_2="V_11"/>
		<map_variables variable_1="Vd" variable_2="V_12"/>
		<map_variables variable_1="C" variable_2="C"/>
		<map_variables variable_1="D" variable_2="one"/>
		<map_variables variable_1="Kc" variable_2="K_11"/>
		<map_variables variable_1="Kd" variable_2="K_12"/>
		<map_variables variable_1="y_init" variable_2="MCP_init"/>
	</connection>
	<connection>
		<map_components component_1="active_GEF" component_2="interface"/>
		<map_variables variable_1="y" variable_2="GEFa"/>
		<map_variables variable_1="t" variable_2="time"/>
		<map_variables variable_1="Va" variable_2="V_1"/>
		<map_variables variable_1="Vb" variable_2="V_2"/>
		<map_variables variable_1="A" variable_2="one"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="one" variable_2="one"/>
		<map_variables variable_1="C" variable_2="K_1"/>
		<map_variables variable_1="D" variable_2="K_2"/>
		<map_variables variable_1="y_init" variable_2="GEFa_init"/>
	</connection>
	<connection>
		<map_components component_1="active_GAP" component_2="interface"/>
		<map_variables variable_1="y" variable_2="GAPa"/>
		<map_variables variable_1="t" variable_2="time"/>
		<map_variables variable_1="Va" variable_2="V_3"/>
		<map_variables variable_1="Vb" variable_2="V_4"/>
		<map_variables variable_1="A" variable_2="C"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="one" variable_2="one"/>
		<map_variables variable_1="C" variable_2="K_3"/>
		<map_variables variable_1="D" variable_2="K_4"/>
		<map_variables variable_1="y_init" variable_2="GAPa_init"/>
	</connection>
	<connection>
		<map_components component_1="RAS_to_GTP" component_2="interface"/>
		<map_variables variable_1="y" variable_2="RGTP"/>
		<map_variables variable_1="t" variable_2="time"/>
		<map_variables variable_1="Va" variable_2="V_5"/>
		<map_variables variable_1="Vb" variable_2="V_6"/>
		<map_variables variable_1="A" variable_2="GEFa_init"/>
		<map_variables variable_1="B" variable_2="GAPa_init"/>
		<map_variables variable_1="one" variable_2="one"/>
		<map_variables variable_1="C" variable_2="K_5"/>
		<map_variables variable_1="D" variable_2="K_6"/>
		<map_variables variable_1="y_init" variable_2="RGTP_init"/>
	</connection>
	<connection>
		<map_components component_1="active_PDE" component_2="interface"/>
		<map_variables variable_1="y" variable_2="PDEa"/>
		<map_variables variable_1="t" variable_2="time"/>
		<map_variables variable_1="Va" variable_2="V_7"/>
		<map_variables variable_1="Vb" variable_2="V_8"/>
		<map_variables variable_1="A" variable_2="C"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="one" variable_2="one"/>
		<map_variables variable_1="C" variable_2="K_7"/>
		<map_variables variable_1="D" variable_2="K_8"/>
		<map_variables variable_1="y_init" variable_2="PDEa_init"/>
	</connection>
	<connection>
		<map_components component_1="R2cAMP2" component_2="interface"/>
		<map_variables variable_1="y" variable_2="R2cAMP2"/>
		<map_variables variable_1="A" variable_2="one"/>
		<map_variables variable_1="one" variable_2="one"/>
		<map_variables variable_1="B" variable_2="R2C2_init"/>
	</connection>
	<connection>
		<map_components component_1="C_subunit" component_2="interface"/>
		<map_variables variable_1="y" variable_2="C"/>
		<map_variables variable_1="A" variable_2="two"/>
		<map_variables variable_1="one" variable_2="one"/>
		<map_variables variable_1="B" variable_2="R2C2_init"/>
	</connection>
	<connection>
		<map_components component_1="V1" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_1"/>
		<map_variables variable_1="A" variable_2="one_pm"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="C" variable_2="v_max1"/>
		<map_variables variable_1="D" variable_2="one_mM"/>
		<map_variables variable_1="E" variable_2="GEFt"/>
	</connection>
	<connection>
		<map_components component_1="V2" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_2"/>
		<map_variables variable_1="A" variable_2="one_pm"/>
		<map_variables variable_1="B" variable_2="Str"/>
		<map_variables variable_1="C" variable_2="v_max2"/>
		<map_variables variable_1="D" variable_2="one_mM"/>
		<map_variables variable_1="E" variable_2="GEFt"/>
	</connection>
	<connection>
		<map_components component_1="V3" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_3"/>
		<map_variables variable_1="A" variable_2="k_c3"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="C" variable_2="one_mMpm"/>
		<map_variables variable_1="D" variable_2="PKAt"/>
		<map_variables variable_1="E" variable_2="GAPt"/>
	</connection>
	<connection>
		<map_components component_1="V4" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_4"/>
		<map_variables variable_1="A" variable_2="one_pm"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="C" variable_2="v_max4"/>
		<map_variables variable_1="D" variable_2="one_mM"/>
		<map_variables variable_1="E" variable_2="GAPt"/>
	</connection>
	<connection>
		<map_components component_1="V5" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_5"/>
		<map_variables variable_1="A" variable_2="k_gef"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="C" variable_2="one_mMpm"/>
		<map_variables variable_1="D" variable_2="GEFt"/>
		<map_variables variable_1="E" variable_2="RASt"/>
	</connection>
	<connection>
		<map_components component_1="V6" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_6"/>
		<map_variables variable_1="A" variable_2="k_gap"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="C" variable_2="one_mMpm"/>
		<map_variables variable_1="D" variable_2="GAPt"/>
		<map_variables variable_1="E" variable_2="RASt"/>
	</connection>
	<connection>
		<map_components component_1="V7" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_7"/>
		<map_variables variable_1="A" variable_2="k_c7"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="C" variable_2="one_mMpm"/>
		<map_variables variable_1="D" variable_2="PKAt"/>
		<map_variables variable_1="E" variable_2="PDEt"/>
	</connection>
	<connection>
		<map_components component_1="V8" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_8"/>
		<map_variables variable_1="A" variable_2="one_pm"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="C" variable_2="v_max8"/>
		<map_variables variable_1="D" variable_2="one_mM"/>
		<map_variables variable_1="E" variable_2="PDEt"/>
	</connection>
	<connection>
		<map_components component_1="V9" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_9"/>
		<map_variables variable_1="A" variable_2="k_c9"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="C" variable_2="one_mMpm"/>
		<map_variables variable_1="D" variable_2="PKAt"/>
		<map_variables variable_1="E" variable_2="MSNt"/>
	</connection>
	<connection>
		<map_components component_1="V10" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_10"/>
		<map_variables variable_1="A" variable_2="one_pm"/>
		<map_variables variable_1="B" variable_2="Str"/>
		<map_variables variable_1="C" variable_2="v_max10"/>
		<map_variables variable_1="D" variable_2="one_mM"/>
		<map_variables variable_1="E" variable_2="MSNt"/>
	</connection>
	<connection>
		<map_components component_1="V11" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_11"/>
		<map_variables variable_1="A" variable_2="k_c11"/>
		<map_variables variable_1="B" variable_2="one"/>
		<map_variables variable_1="C" variable_2="one_mMpm"/>
		<map_variables variable_1="D" variable_2="PKAt"/>
		<map_variables variable_1="E" variable_2="MSNt"/>
	</connection>
	<connection>
		<map_components component_1="V12" component_2="interface"/>
		<map_variables variable_1="V" variable_2="V_12"/>
		<map_variables variable_1="A" variable_2="one_pm"/>
		<map_variables variable_1="B" variable_2="Str"/>
		<map_variables variable_1="C" variable_2="v_max12"/>
		<map_variables variable_1="D" variable_2="one_mM"/>
		<map_variables variable_1="E" variable_2="MSNt"/>
	</connection>
	<connection>
		<map_components component_1="VPKAact" component_2="R2cAMP2"/>
		<map_variables variable_1="R2cAMP2" variable_2="y"/>
	</connection>
	<connection>
		<map_components component_1="VPKAact" component_2="C_subunit"/>
		<map_variables variable_1="C" variable_2="y"/>
	</connection>
	<connection>
		<map_components component_1="adenylate_cyclase" component_2="RAS_to_GTP"/>
		<map_variables variable_1="RGTP" variable_2="y"/>
	</connection>
	<connection>
		<map_components component_1="adenylate_cyclase" component_2="cyclic_AMP"/>
		<map_variables variable_1="CYCLa" variable_2="CYCLa"/>
	</connection>
	<connection>
		<map_components component_1="cyclic_AMP" component_2="active_PDE"/>
		<map_variables variable_1="PDEa" variable_2="y"/>
	</connection>
	<connection>
		<map_components component_1="holoenzyme_R_C" component_2="cyclic_AMP"/>
		<map_variables variable_1="cAMP" variable_2="cAMP"/>
	</connection>
	<connection>
		<map_components component_1="VPKAact" component_2="holoenzyme_R_C"/>
		<map_variables variable_1="R2C2" variable_2="R2C2"/>
	</connection>
	<connection>
		<map_components component_1="VPKAact" component_2="cyclic_AMP"/>
		<map_variables variable_1="cAMP" variable_2="cAMP"/>
	</connection>
	<connection>
		<map_components component_1="cytosol" component_2="nucleus"/>
		<map_variables variable_1="A" variable_2="y"/>
		<map_variables variable_1="y" variable_2="A"/>
	</connection>
	<connection><map_components component_1="cytosol" component_2="cytosol_phos"/>
		<map_variables variable_1="M1" variable_2="y"/>
		<map_variables variable_1="y" variable_2="M1"/>
	</connection>
	<connection><map_components component_1="nucleus" component_2="nucleus_phos"/>
		<map_variables variable_1="M1" variable_2="y"/>
		<map_variables variable_1="y" variable_2="M1"/>
	</connection>
	<connection><map_components component_1="nucleus_phos" component_2="cytosol_phos"/>
		<map_variables variable_1="A" variable_2="y"/>
		<map_variables variable_1="y" variable_2="A"/>
	</connection>
	
	<!-- imports -->
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="Msn2_fractions.cellml">
	   <component component_ref="interface" name="M_cyto"/>
    </import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="/Msn2_fractions.cellml">
		<component component_ref="interface" name="M_nucl"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="nucleocytoplasm.cellml">
		<component component_ref="interface" name="cytosol"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="nucleocytoplasm.cellml">
		<component component_ref="interface" name="nucleus"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="nucleocytoplasm.cellml">
		<component component_ref="interface" name="nucleus_phos"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="nucleocytoplasm.cellml">
		<component component_ref="interface" name="cytosol_phos"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="process_fractions.cellml">
		<component component_ref="interface" name="active_GEF"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="process_fractions.cellml">
		<component component_ref="interface" name="active_GAP"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="process_fractions.cellml">
		<component component_ref="interface" name="RAS_to_GTP"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="process_fractions.cellml">
		<component component_ref="interface" name="active_PDE"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="subunits.cellml">
		<component component_ref="interface" name="R2cAMP2"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="subunits.cellml">
		<component component_ref="interface" name="C_subunit"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V1"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V2"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V3"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V4"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V5"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V6"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V7"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V8"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V9"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V10"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V11"/>
	</import>
	<import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="V_rates.cellml">
		<component component_ref="interface" name="V12"/>
	</import>
	
	<!-- metadata -->
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
		<rdf:Description rdf:about="garmendiatorres_2007_1.1model">
			<dc:creator rdf:parseType="Resource">
				<vCard:N rdf:parseType="Resource">
					<vCard:Family>Zhu</vCard:Family>
					<vCard:Given>Xin Yue</vCard:Given>
					<vCard:Other>Mona</vCard:Other>
				</vCard:N>
				<vCard:EMAIL rdf:parseType="Resource">
					<rdf:value>xzhu055@aucklanduni.ac.nz</rdf:value>
					<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
				</vCard:EMAIL>
				<vCard:ORG rdf:parseType="Resource">
					<vCard:Orgname>The University of Auckland</vCard:Orgname>
					<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
				</vCard:ORG>
			</dc:creator>
			<dcterms:created rdf:parseType="Resource">
				<dcterms:W3CDTF>21-12-2010</dcterms:W3CDTF>
			</dcterms:created>
		</rdf:Description>
		<rdf:Description rdf:about="#garmendiatorres_2007_1.1model">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Nucleocytoplasmic oscillations of the yeast transcription factor Msn2: evidence for periodic PKA activation</dc:title>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:parseType="Resource">
				<rdf:value>This is the CellML description of the 2007 mathematical model of cAMP-PKA coupled to MSN2 Sub-cellular localisation developed by Cecilia Garmendia Torres, Albert Goldbeter and Michel Jacquet.
				</rdf:value>
				<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
					<vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Mona Zhu</vCard:FN>
				</dc:creator>
			</cmeta:comment>
			<cmeta:species xmlns:cmeta="http://www.cellml.org/metadata/1.0#">Msn2</cmeta:species>
			<bqs:reference rdf:parseType="Resource">
				<dc:subject rdf:parseType="Resource">
					<bqs:subject_type>keyword</bqs:subject_type>
					<rdf:value>
						<rdf:Bag>
							<rdf:li>Nucleocytoplasmic Oscillations</rdf:li>
							<rdf:li>Yeast Transcription Factor</rdf:li>
							<rdf:li>Msn2</rdf:li>
							<rdf:li>PKA activation</rdf:li>
							<rdf:li>cAMP-PKA pathway</rdf:li>
							<rdf:li>Gene Regulation</rdf:li>
						</rdf:Bag>
					</rdf:value>
				</dc:subject>
			</bqs:reference>
			<bqs:reference rdf:parseType="Resource">
				<bqs:Pubmed_id>17570669</bqs:Pubmed_id>
				<bqs:JournalArticle rdf:parseType="Resource">
					<dc:creator>
						<rdf:Seq>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Garmendia_Torres</vCard:Family>
										<vCard:Given>Cecilia</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Goldbeter</vCard:Family>
										<vCard:Given>Albert</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Jacquet</vCard:Family>
										<vCard:Given>Michel</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
						</rdf:Seq>
					</dc:creator>
					<dc:title>Nucleocytoplasmic oscillations of the yeast transcription factor Msn2: evidence for periodic PKA activation</dc:title>
					<dcterms:issued rdf:parseType="Resource">
						<dcterms:W3CDTF>June 19, 2007</dcterms:W3CDTF>
					</dcterms:issued>
					<bqs:Journal rdf:parseType="Resource">
						<dc:title>Current Biology</dc:title>
					</bqs:Journal>
					<bqs:volume>17</bqs:volume>
					<bqs:first_page>1044</bqs:first_page>
					<bqs:last_page>1049</bqs:last_page>
				</bqs:JournalArticle>
			</bqs:reference>
		</rdf:Description>
	</rdf:RDF>
</model>