// This CellML file was generated on 21/01/2008 at 18:36:02 using:
//
// COR (0.9.31.857)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: The University of Auckland, Auckland Bioengineering Institute
// comment: This model has been curated and is known to replicate the published output in PCEnv and COR.
// created: W3CDTF 2003-01-17T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2008-02-25T11:45:22+13:00; model unit checked and curated.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2003-06-05; Corrected alpha_j_calculation equation in fast_sodium_current_j_gate component.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2003-08-12; Corrected equations: alpha_h_calculation equation in fast_sodium_current_h_gate component.; Given Catherine; Family Lloyd; Other May
// bio_entity: Ventricular Myocyte
// simulation: endingValue 10000; nonstandard-pointDensity 10000
// title: Priebe and Beuckelmann's 1998 mathematical model of human ventricular myocytes.
// species: Homo sapiens
// reference: subject_type keyword; cardiac; ventricular myocyte; electrophysiology; Ventricular Myocyte; heart failure
// reference: Pubmed_id 9633920; Given Leo; Family Priebe; Given Dirk; Family Beuckelmann; Other J; title Simulation Study of Cellular Electrical Properties in Heart Failure; volume 82; first_page 1206; title Circulation Research; W3CDTF 1998-06-15; last_page 1223
// comment: FN Catherine Lloyd; This is the CellML description of Priebe and Beuckelmann's 1998 mathematical model of human ventricular myocytes.
def model priebe_beuckelmann_1998 as
  // Simulation study of cellular electric properties in heart failure
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and PCEnv to replicate the published results. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: Patients with severe heart failure are at high risk of sudden cardiac death. In the majority of these patients, sudden cardiac death is thought to be due to ventricular tachyarrhythmias. Alterations of the electric properties of single myocytes in heart failure may favor the occurrence of ventricular arrhythmias in these patients by inducing early or delayed afterdepolarizations. Mathematical models of the cellular action potential and its underlying ionic currents could help to elucidate possible arrhythmogenic mechanisms on a cellular level. In the present study, selected ionic currents based on human data are incorporated into a model of the ventricular action potential for the purpose of studying the cellular electrophysiological consequences of heart failure. Ionic currents that are not yet sufficiently characterized in human ventricular myocytes are adopted from the action potential model developed by Luo and Rudy (LR model). The main results obtained from this model are as follows: The action potential in ventricular myocytes from failing hearts is longer than in nonfailing control hearts. The major underlying mechanisms for this prolongation are the enhanced activity of the Na+-Ca2+ exchanger, the slowed diastolic decay of the [Ca2+]i transient, and the reduction of the inwardly rectifying K+ current and the Na+-K+ pump current in myocytes of failing hearts. Furthermore, the fast and slow components of the delayed rectifier K+ current (I(Kr) and I(Ks), respectively) are of utmost importance in determining repolarization of the human ventricular action potential. In contrast, the influence of the transient outward K+ current on APD is only small in both cell groups. Inhibition of I(Kr) promotes the development of early afterdepolarizations in failing, but not nonfailing, myocytes. Furthermore, spontaneous Ca2+ release from the sarcoplasmic reticulum triggers a premature action potential only in failing myocytes. This model of the ventricular action potential and its alterations in heart failure is intended to serve as a tool for investigating the effects of therapeutic interventions on the electric excitability of the human ventricular myocardium.
  //
  // The original paper reference is cited below:
  //
  // Simulation study of cellular electric properties in heart failure, Leo Priebe and Dirk J. Beuckelmann, 1998, Circulation Research, 82, 1206-1223. PubMed ID: 9633920 (http://www.ncbi.nlm.nih.gov/pubmed/9633920)
  //
  // diagram of the model
  //
  // A schematic diagram describing the transmembrane ionic currents through channels, pumps and exchangers, that are captured in the Priebe and Beuckelmann 1998 model of a human ventricular myocyte. The intracellular compartment in the diagram represents the sarcoplasmic reticulum (SR). This is divided into the two subcompartments, the network SR (NSR) and the junctional SR (JSR). Ca2+ buffers are present in both the cytoplasm and the JSR - troponin (TRPN), Calmodulin (CMDN), and calsequestrin (CSQN).
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mV_per_ms as
    unit mV;
    unit ms {expo: -1};
  enddef;
  def unit mS_per_uF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit pF as
    unit farad {pref: pico};
  enddef;
  def unit uA_per_uF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit um as
    unit metre {pref: micro};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit fL as
    unit litre {pref: femto};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp cell as
    var V: mV {init: -90.7796417483135, pub: out};
    var R: joule_per_mole_kelvin {init: 8.3143, pub: out};
    var T: kelvin {init: 310.15, pub: out};
    var F: coulomb_per_millimole {init: 96.4867, pub: out};
    var FonRT: per_mV {pub: out};
    var Cm: pF {init: 153.4, pub: out};
    var time: ms {pub: in};
    var failing: dimensionless {init: 0, pub: out};
    var i_Na: uA_per_uF {pub: in};
    var i_Ca: uA_per_uF {pub: in};
    var i_to: uA_per_uF {pub: in};
    var i_Kr: uA_per_uF {pub: in};
    var i_Ks: uA_per_uF {pub: in};
    var i_K1: uA_per_uF {pub: in};
    var i_NaCa: uA_per_uF {pub: in};
    var i_NaK: uA_per_uF {pub: in};
    var i_b_Na: uA_per_uF {pub: in};
    var i_b_Ca: uA_per_uF {pub: in};
    var dVdt: mV_per_ms {pub: out};
    var I_tot: uA_per_uF;
    var i_Stim: uA_per_uF {pub: out};
    var stim_offset: ms {init: 0};
    var stim_period: ms {init: 1000};
    var stim_duration: ms {init: 3};
    var stim_amplitude: uA_per_uF {init: -15};
    var past: ms;
    var V_clamp: dimensionless {init: 0};
    var V_hold: mV {init: -60};
    var V_step: mV {init: 0};
    FonRT = F/(R*T);
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{uA_per_uF};
    endsel;
    I_tot = i_Na+i_Ca+i_to+i_Kr+i_Ks+i_K1+i_NaCa+i_NaK+i_b_Na+i_b_Ca+i_Stim;
    ode(V, time) = dVdt;
    dVdt = sel
      case (V_clamp == 1{dimensionless}) and ((time <= 500{ms}) or (time > 800{ms})):
        (V_hold-V)/1{ms};
      case (V_clamp == 1{dimensionless}) and (time > 500{ms}) and (time <= 800{ms}):
        (V_step-V)/1{ms};
      otherwise:
        -1{dimensionless}*I_tot;
    endsel;
  enddef;

  def comp INa as
    var i_Na: uA_per_uF {pub: out};
    var E_Na: mV {pub: out};
    var g_Na: mS_per_uF {init: 16};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var FonRT: per_mV {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
    E_Na = ln(Nao/Nai)/FonRT;
  enddef;

  def comp INa_m_gate as
    var m: dimensionless {init: 0.000585525582501575, pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_m = sel
      case abs(V+47.13{mV}) > 0.001{mV}:
        0.32{per_mV_ms}*(V+47.13{mV})/(1{dimensionless}-exp(-0.1{per_mV}*(V+47.13{mV})));
      otherwise:
        3.2{per_ms};
    endsel;
    beta_m = 0.08{per_ms}*exp(-V/11{mV});
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp INa_h_gate as
    var h: dimensionless {init: 0.995865529216237, pub: out};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_h = sel
      case V < -40{mV}:
        0.135{per_ms}*exp((80{mV}+V)/(-6.8{mV}));
      otherwise:
        0{per_ms};
    endsel;
    beta_h = sel
      case V < -40{mV}:
        3.56{per_ms}*exp(0.079{per_mV}*V)+3.1e5{per_ms}*exp(0.35{per_mV}*V);
      otherwise:
        1{dimensionless}/(0.13{ms}*(1{dimensionless}+exp(-(V+10.66{mV})/11.1{mV})));
    endsel;
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp INa_j_gate as
    var j: dimensionless {init: 0.997011204496203, pub: out};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_j = sel
      case V < -40{mV}:
        (-127140{per_mV_ms}*exp(0.244{per_mV}*V)-3.474e-5{per_mV_ms}*exp(-0.04391{per_mV}*V))*(V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
      otherwise:
        0{per_ms};
    endsel;
    beta_j = sel
      case V < -40{mV}:
        0.1212{per_ms}*exp(-0.01052{per_mV}*V)/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.3{per_ms}*exp(-2.535e-7{per_mV}*V)/(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV})));
    endsel;
    ode(j, time) = alpha_j*(1{dimensionless}-j)-beta_j*j;
  enddef;

  def comp ICa as
    var i_Ca: uA_per_uF {pub: out};
    var E_Ca: mV {pub: out};
    var g_Ca_max: mS_per_uF {init: 0.064};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Cai: mM {priv: out, pub: in};
    var FonRT: per_mV {pub: in};
    var Cao: mM {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    i_Ca = g_Ca_max*d*f*f_Ca*(V-E_Ca);
    E_Ca = ln(Cao/Cai)/(2{dimensionless}*FonRT);
  enddef;

  def comp ICa_d_gate as
    var d: dimensionless {init: 2.50653215966786e-10, pub: out};
    var alpha_d: per_ms;
    var beta_d: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_d = 14.9859{per_ms}/(16.6813{dimensionless}*sqrt(2{dimensionless}*pi))*exp(-sqr((V-22.36{mV})/16.6813{mV})/2{dimensionless});
    beta_d = 0.1471{per_ms}-5.3{per_ms}/(14.93{dimensionless}*sqrt(2{dimensionless}*pi))*exp(-sqr((V-6.2744{mV})/14.93{mV})/2{dimensionless});
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp ICa_f_gate as
    var f: dimensionless {init: 0.92130376850548, pub: out};
    var alpha_f: per_ms;
    var beta_f: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    alpha_f = 6.872e-3{per_ms}/(1{dimensionless}+exp((V-6.1546{mV})/6.1223{mV}));
    beta_f = (0.0687{per_ms}*exp(-0.1081{per_mV}*(V+9.8255{mV}))+0.0112{per_ms})/(1{dimensionless}+exp(-0.2779{per_mV}*(V+9.8255{mV})))+5.474e-4{per_ms};
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  def comp ICa_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: mM {init: 0.0006};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    f_Ca = Km_Ca/(Km_Ca+Cai);
  enddef;

  def comp Ito as
    var i_to: uA_per_uF {pub: out};
    var g_to_max: mS_per_uF;
    var E_to: mV;
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var V: mV {priv: out, pub: in};
    var time: ms {priv: out, pub: in};
    var failing: dimensionless {pub: in};
    var t: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    g_to_max = sel
      case failing == 0{dimensionless}:
        0.3{mS_per_uF};
      otherwise:
        0.191{mS_per_uF};
    endsel;
    i_to = g_to_max*r*t*(V-E_to);
    E_to = ln((0.043{dimensionless}*Nao+Ko)/(0.043{dimensionless}*Nai+Ki))/FonRT;
  enddef;

  def comp Ito_r_gate as
    var r: dimensionless {init: 1.75032478501027e-5, pub: out};
    var alpha_r: per_ms;
    var beta_r: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(r, time) = alpha_r*(1{dimensionless}-r)-beta_r*r;
    alpha_r = 0.5266{per_ms}*exp(-0.0166{per_mV}*(V-42.2912{mV}))/(1{dimensionless}+exp(-0.0943{per_mV}*(V-42.2912{mV})));
    beta_r = (5.186e-5{per_mV_ms}*V+0.5149{per_ms}*exp(-0.1344{per_mV}*(V-5.0027{mV})))/(1{dimensionless}+exp(-0.1348{per_mV}*(V-5.186e-5{mV})));
  enddef;

  def comp Ito_t_gate as
    var t: dimensionless {init: 0.999897251531651, pub: out};
    var alpha_t: per_ms;
    var beta_t: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(t, time) = alpha_t*(1{dimensionless}-t)-beta_t*t;
    alpha_t = (5.612e-5{per_mV_ms}*V+0.0721{per_ms}*exp(-0.173{per_mV}*(V+34.2531{mV})))/(1{dimensionless}+exp(-0.1732{per_mV}*(V+34.2531{mV})));
    beta_t = (1.215e-4{per_mV_ms}*V+0.0767{per_ms}*exp(-1.66e-9{per_mV}*(V+34.0235{mV})))/(1{dimensionless}+exp(-0.1604{per_mV}*(V+34.0235{mV})));
  enddef;

  def comp IKs as
    var i_Ks: uA_per_uF {pub: out};
    var g_Ks_max: mS_per_uF {init: 0.02};
    var E_Ks: mV;
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Xs: dimensionless {priv: in};
    i_Ks = g_Ks_max*sqr(Xs)*(V-E_Ks);
    E_Ks = ln((0.01833{dimensionless}*Nao+Ko)/(0.01833{dimensionless}*Nai+Ki))/FonRT;
  enddef;

  def comp IKs_Xs_gate as
    var Xs: dimensionless {init: 0.00885658064818147, pub: out};
    var alpha_Xs: per_ms;
    var beta_Xs: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(Xs, time) = alpha_Xs*(1{dimensionless}-Xs)-beta_Xs*Xs;
    alpha_Xs = 3.013e-3{per_ms}/(1{dimensionless}+exp((7.4454{mV}-(V+10{mV}))/14.3171{mV}));
    beta_Xs = 5.87e-3{per_ms}/(1{dimensionless}+exp((5.95{mV}+V+10{mV})/15.82{mV}));
  enddef;

  def comp IKr as
    var i_Kr: uA_per_uF {pub: out};
    var g_Kr_max: mS_per_uF {init: 0.015};
    var rik: dimensionless;
    var E_K: mV;
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Xr: dimensionless {priv: in};
    i_Kr = g_Kr_max*Xr*rik*(V-E_K);
    E_K = ln(Ko/Ki)/FonRT;
    rik = 1{dimensionless}/(1{dimensionless}+exp((V+26{mV})/23{mV}));
  enddef;

  def comp IKr_Xr_gate as
    var Xr: dimensionless {init: 0.000215523048438941, pub: out};
    var alpha_Xr: per_ms;
    var beta_Xr: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(Xr, time) = alpha_Xr*(1{dimensionless}-Xr)-beta_Xr*Xr;
    alpha_Xr = 0.005{per_ms}*exp(5.266e-4{per_mV}*(V+4.067{mV}))/(1{dimensionless}+exp(-0.1262{per_mV}*(V+4.067{mV})));
    beta_Xr = 0.016{per_ms}*exp(1.6e-3{per_mV}*(V+65.66{mV}))/(1{dimensionless}+exp(0.0783{per_mV}*(V+65.66{mV})));
  enddef;

  def comp IK1 as
    var i_K1: uA_per_uF {pub: out};
    var E_K1: mV {priv: out};
    var g_K1_max: mS_per_uF;
    var Ki: mM {pub: in};
    var Ko: mM {pub: in};
    var FonRT: per_mV {pub: in};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var K1_infinity: dimensionless {priv: in};
    var failing: dimensionless {pub: in};
    g_K1_max = sel
      case failing == 0{dimensionless}:
        2.5{mS_per_uF};
      otherwise:
        2{mS_per_uF};
    endsel;
    i_K1 = g_K1_max*K1_infinity*(V-E_K1);
    E_K1 = ln(Ko/Ki)/FonRT;
  enddef;

  def comp IK1_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var E_K1: mV {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
    alpha_K1 = 0.1{per_ms}/(1{dimensionless}+exp(0.06{per_mV}*(V-(E_K1+200{mV}))));
    beta_K1 = (3{per_ms}*exp(2e-4{per_mV}*(V+100{mV}+(-E_K1)))+1{per_ms}*exp(0.1{per_mV}*(V-(10{mV}+E_K1))))/(1{dimensionless}+exp(-0.5{per_mV}*(V-E_K1)));
  enddef;

  def comp ICab as
    var i_b_Ca: uA_per_uF {pub: out};
    var g_b_Ca_max: mS_per_uF;
    var E_Ca: mV {pub: in};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var failing: dimensionless {pub: in};
    g_b_Ca_max = sel
      case failing == 0{dimensionless}:
        0.00085{mS_per_uF};
      otherwise:
        0.0013{mS_per_uF};
    endsel;
    i_b_Ca = g_b_Ca_max*(V-E_Ca);
  enddef;

  def comp INab as
    var i_b_Na: uA_per_uF {pub: out};
    var g_b_Na_max: mS_per_uF;
    var E_Na: mV {pub: in};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var failing: dimensionless {pub: in};
    g_b_Na_max = sel
      case failing == 0{dimensionless}:
        0.001{mS_per_uF};
      otherwise:
        0{mS_per_uF};
    endsel;
    i_b_Na = g_b_Na_max*(V-E_Na);
  enddef;

  def comp INaK as
    var i_NaK: uA_per_uF {pub: out};
    var I_NaK_max: uA_per_uF;
    var f_NaK: dimensionless;
    var K_mNai: mM {init: 10};
    var K_mKo: mM {init: 1.5};
    var sigma: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var FonRT: per_mV {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var failing: dimensionless {pub: in};
    I_NaK_max = sel
      case failing == 0{dimensionless}:
        1.3{uA_per_uF};
      otherwise:
        0.75{uA_per_uF};
    endsel;
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*FonRT)+0.0365{dimensionless}*sigma*exp(-V*FonRT));
    sigma = 1{dimensionless}/7{dimensionless}*(exp(Nao/67.3{mM})-1{dimensionless});
    i_NaK = I_NaK_max*f_NaK*1{dimensionless}/(1{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless}))*Ko/(Ko+K_mKo);
  enddef;

  def comp INaCa as
    var i_NaCa: uA_per_uF {pub: out};
    var K_NaCa: uA_per_uF;
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var FonRT: per_mV {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var failing: dimensionless {pub: in};
    K_NaCa = sel
      case failing == 0{dimensionless}:
        1000{uA_per_uF};
      otherwise:
        1650{uA_per_uF};
    endsel;
    i_NaCa = K_NaCa*1{dimensionless}/(pow(K_mNa, 3{dimensionless})+pow(Nao, 3{dimensionless}))*1{dimensionless}/(K_mCa+Cao)*1{dimensionless}/(1{dimensionless}+K_sat*exp((eta-1{dimensionless})*V*FonRT))*(exp(eta*V*FonRT)*pow(Nai, 3{dimensionless})*Cao-exp((eta-1{dimensionless})*V*FonRT)*pow(Nao, 3{dimensionless})*Cai);
  enddef;

  def comp Irel as
    var i_rel: mM_per_ms {pub: out};
    var G_rel: per_ms;
    var G_rel_max: per_ms {init: 22};
    var G_rel_overload: per_ms {init: 3};
    var K_mrel: mM {init: 0.0008};
    var delta_Ca_ith: mM {init: 5e-6};
    var K_mCSQN: mM {pub: in};
    var time: ms {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: mM {pub: in};
    var Ca_JSR: mM {pub: in};
    var V_myo: fL {pub: in};
    var V_JSR: fL {pub: in};
    var i_NaCa: uA_per_uF {pub: in};
    var i_Ca: uA_per_uF {pub: in};
    var i_b_Ca: uA_per_uF {pub: in};
    var dVdt: mV_per_ms {pub: in};
    var i_Stim: uA_per_uF {pub: in};
    var Cm: pF {pub: in};
    var APtrack: dimensionless {init: -1.372158997089e-136};
    var APtrack2: dimensionless {init: -7.58517896402761e-136};
    var APtrack3: dimensionless {init: 4.82035353592764e-5};
    var Cainfluxtrack: mM {init: -7.71120176147331e-138};
    var OVRLDtrack: dimensionless {init: 1e-6};
    var OVRLDtrack2: dimensionless {init: 1e-6};
    var OVRLDtrack3: dimensionless {init: 1e-6};
    var CSQNthresh: mM {init: 0.7};
    var Logicthresh: dimensionless {init: 0.98};
    ode(APtrack, time) = sel
      case dVdt > 150{uA_per_uF}:
        100{per_ms}*(1{dimensionless}-APtrack)-0.5{per_ms}*APtrack;
      otherwise:
        -0.5{per_ms}*APtrack;
    endsel;
    ode(APtrack2, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100{per_ms}*(1{dimensionless}-APtrack2)-0.5{per_ms}*APtrack2;
      otherwise:
        -0.5{per_ms}*APtrack2;
    endsel;
    ode(APtrack3, time) = sel
      case (APtrack < 0.2{dimensionless}) and (APtrack > 0.18{dimensionless}):
        100{per_ms}*(1{dimensionless}-APtrack3)-0.5{per_ms}*APtrack3;
      otherwise:
        -0.01{per_ms}*APtrack3;
    endsel;
    ode(Cainfluxtrack, time) = sel
      case APtrack > 0.2{dimensionless}:
        -Cm*(i_Ca-i_NaCa+i_b_Ca)/(2{dimensionless}*V_myo*F);
      case (APtrack2 > 0.01{dimensionless}) and (APtrack <= 0.2{dimensionless}):
        0{mM_per_ms};
      otherwise:
        -0.5{per_ms}*Cainfluxtrack;
    endsel;
    ode(OVRLDtrack, time) = sel
      case (1{mM}/(1{dimensionless}+K_mCSQN/Ca_JSR) > CSQNthresh) and (OVRLDtrack3 < 0.37{dimensionless}) and (APtrack3 < 0.37{dimensionless}):
        0{dimensionless}*50{per_ms}*(1{dimensionless}-OVRLDtrack);
      otherwise:
        -0{dimensionless}*0.5{per_ms}*OVRLDtrack;
    endsel;
    ode(OVRLDtrack2, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack2 < Logicthresh):
        0{dimensionless}*50{per_ms}*(1{dimensionless}-OVRLDtrack2);
      otherwise:
        -0{dimensionless}*0.5{per_ms}*OVRLDtrack2;
    endsel;
    ode(OVRLDtrack3, time) = sel
      case (OVRLDtrack > Logicthresh) and (OVRLDtrack3 < Logicthresh):
        0{dimensionless}*50{per_ms}*(1{dimensionless}-OVRLDtrack3);
      otherwise:
        -0{dimensionless}*0.01{per_ms}*OVRLDtrack3;
    endsel;
    G_rel = sel
      case Cainfluxtrack > delta_Ca_ith:
        1{dimensionless}*G_rel_max*(Cainfluxtrack-delta_Ca_ith)/(K_mrel+Cainfluxtrack-delta_Ca_ith)*(1{dimensionless}-APtrack2)*APtrack2;
      case (Cainfluxtrack <= delta_Ca_ith) and (OVRLDtrack2 > 0{dimensionless}):
        0{dimensionless}*G_rel_overload*(1{dimensionless}-OVRLDtrack2)*OVRLDtrack2;
      otherwise:
        0{per_ms};
    endsel;
    i_rel = G_rel*(Ca_JSR-Cai);
  enddef;

  def comp Iup as
    var i_up: mM_per_ms {pub: out};
    var I_up_max: mM_per_ms;
    var K_mup: mM {init: 0.00092};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var failing: dimensionless {pub: in};
    I_up_max = sel
      case failing == 0{dimensionless}:
        0.0045{mM_per_ms};
      otherwise:
        0.0015{mM_per_ms};
    endsel;
    i_up = I_up_max*Cai/(Cai+K_mup);
  enddef;

  def comp Ileak as
    var i_leak: mM_per_ms {pub: out};
    var K_leak: per_ms;
    var time: ms {pub: in};
    var Ca_NSR: mM {pub: in};
    var failing: dimensionless {pub: in};
    K_leak = sel
      case failing == 0{dimensionless}:
        0.00026{per_ms};
      otherwise:
        0.00017{per_ms};
    endsel;
    i_leak = K_leak*Ca_NSR;
  enddef;

  def comp Itr as
    var i_tr: mM_per_ms {pub: out};
    var tau_tr: ms {init: 180};
    var time: ms {pub: in};
    var Ca_JSR: mM {pub: in};
    var Ca_NSR: mM {pub: in};
    i_tr = 1{dimensionless}*(Ca_NSR-Ca_JSR)/tau_tr;
  enddef;

  def comp calcium_buffers_in_the_myoplasm as
    var K_mTn: mM {init: 0.0005};
    var K_mCMDN: mM {init: 0.00238};
    var Tn_max: mM {init: 0.07};
    var CMDN_max: mM {init: 0.05};
    var Cai: mM {pub: in};
    var buffon: dimensionless {init: 1};
    var Cai_bufc: dimensionless {pub: out};
    Cai_bufc = 1{dimensionless}/(1{dimensionless}+buffon*(CMDN_max*K_mCMDN/sqr(K_mCMDN+Cai)+Tn_max*K_mTn/sqr(K_mTn+Cai)));
  enddef;

  def comp calcium_buffers_in_the_JSR as
    var CSQN_max: mM {init: 10};
    var K_mCSQN: mM {init: 0.8, pub: out};
    var Ca_JSR: mM {pub: in};
    var Ca_JSR_bufc: dimensionless {pub: out};
    Ca_JSR_bufc = 1{dimensionless}/(1{dimensionless}+CSQN_max*K_mCSQN/sqr(K_mCSQN+Ca_JSR));
  enddef;

  def comp Ionic_concentrations as
    var Nai: mM {init: 10, pub: out};
    var Nao: mM {init: 138, pub: out};
    var Cai: mM {init: 0.0002, pub: out};
    var Cao: mM {init: 2, pub: out};
    var Ki: mM {init: 140, pub: out};
    var Ko: mM {init: 4, pub: out};
    var Ca_JSR: mM {init: 2.5, pub: out};
    var Ca_NSR: mM {init: 2.5, pub: out};
    var preplength: um {init: 100};
    var radius: um {init: 11};
    var volume: fL;
    var V_myo: fL {pub: out};
    var V_JSR: fL {pub: out};
    var V_NSR: fL;
    var time: ms {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_Na: uA_per_uF {pub: in};
    var i_b_Na: uA_per_uF {pub: in};
    var i_NaCa: uA_per_uF {pub: in};
    var i_NaK: uA_per_uF {pub: in};
    var i_Ca: uA_per_uF {pub: in};
    var i_b_Ca: uA_per_uF {pub: in};
    var i_Kr: uA_per_uF {pub: in};
    var i_K1: uA_per_uF {pub: in};
    var i_Ks: uA_per_uF {pub: in};
    var i_to: uA_per_uF {pub: in};
    var i_Stim: uA_per_uF {pub: in};
    var i_tr: mM_per_ms {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_leak: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    var Cm: pF {pub: in};
    var Cai_bufc: dimensionless {pub: in};
    var Ca_JSR_bufc: dimensionless {pub: in};
    volume = pi*preplength*sqr(radius);
    V_myo = 0.68{dimensionless}*volume;
    V_NSR = 0.0552{dimensionless}*volume;
    V_JSR = 0.0048{dimensionless}*volume;
    ode(Nai, time) = -1{dimensionless}*Cm*(i_Na+i_b_Na+i_NaCa*3{dimensionless}+i_NaK*3{dimensionless})/(V_myo*F);
    ode(Ki, time) = -1{dimensionless}*Cm*(i_to+i_Kr+i_K1+i_Stim+i_Ks-2{dimensionless}*i_NaK)/(V_myo*F);
    ode(Cai, time) = Cai_bufc*(-Cm*(i_Ca-2{dimensionless}*i_NaCa+i_b_Ca)/(2{dimensionless}*V_myo*F)+i_rel*V_JSR/V_myo+(i_leak-i_up)*V_NSR/V_myo);
    ode(Ca_JSR, time) = Ca_JSR_bufc*(i_tr-i_rel);
    ode(Ca_NSR, time) = -1{dimensionless}*(i_leak+V_JSR/V_NSR*i_tr-i_up);
  enddef;

  def comp transmembrane_currents as
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def group as containment for
    comp cell incl
      comp transmembrane_currents incl
        comp INa incl
          comp INa_m_gate;
          comp INa_h_gate;
          comp INa_j_gate;
        endcomp;
        comp ICa incl
          comp ICa_d_gate;
          comp ICa_f_gate;
          comp ICa_f_Ca_gate;
        endcomp;
        comp Ito incl
          comp Ito_r_gate;
          comp Ito_t_gate;
        endcomp;
        comp IKs incl
          comp IKs_Xs_gate;
        endcomp;
        comp IKr incl
          comp IKr_Xr_gate;
        endcomp;
        comp IK1 incl
          comp IK1_K1_gate;
        endcomp;
        comp INab;
        comp ICab;
        comp INaCa;
        comp INaK;
      endcomp;
      comp intracellular_currents incl
        comp Irel;
        comp Iup;
        comp Ileak;
        comp Itr;
      endcomp;
      comp Ions_n_reversal_potentials incl
        comp calcium_buffers_in_the_myoplasm;
        comp calcium_buffers_in_the_JSR;
        comp Ionic_concentrations;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp INa incl
      comp INa_m_gate;
      comp INa_h_gate;
      comp INa_j_gate;
    endcomp;
    comp ICa incl
      comp ICa_d_gate;
      comp ICa_f_gate;
      comp ICa_f_Ca_gate;
    endcomp;
    comp Ito incl
      comp Ito_r_gate;
      comp Ito_t_gate;
    endcomp;
    comp IKs incl
      comp IKs_Xs_gate;
    endcomp;
    comp IKr incl
      comp IKr_Xr_gate;
    endcomp;
    comp IK1 incl
      comp IK1_K1_gate;
    endcomp;
  enddef;
  def map between cell and environment for
    vars time and time;
  enddef;
  def map between INa and environment for
    vars time and time;
  enddef;
  def map between ICa and environment for
    vars time and time;
  enddef;
  def map between Ito and environment for
    vars time and time;
  enddef;
  def map between IKs and environment for
    vars time and time;
  enddef;
  def map between IKr and environment for
    vars time and time;
  enddef;
  def map between IK1 and environment for
    vars time and time;
  enddef;
  def map between INab and environment for
    vars time and time;
  enddef;
  def map between ICab and environment for
    vars time and time;
  enddef;
  def map between INaCa and environment for
    vars time and time;
  enddef;
  def map between INaK and environment for
    vars time and time;
  enddef;
  def map between Irel and environment for
    vars time and time;
  enddef;
  def map between Iup and environment for
    vars time and time;
  enddef;
  def map between Ileak and environment for
    vars time and time;
  enddef;
  def map between Itr and environment for
    vars time and time;
  enddef;
  def map between Ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between cell and INa for
    vars i_Na and i_Na;
    vars V and V;
    vars FonRT and FonRT;
  enddef;
  def map between cell and ICa for
    vars i_Ca and i_Ca;
    vars V and V;
    vars FonRT and FonRT;
  enddef;
  def map between cell and Ito for
    vars i_to and i_to;
    vars failing and failing;
    vars V and V;
    vars FonRT and FonRT;
  enddef;
  def map between cell and IKs for
    vars i_Ks and i_Ks;
    vars V and V;
    vars FonRT and FonRT;
  enddef;
  def map between cell and IKr for
    vars i_Kr and i_Kr;
    vars V and V;
    vars FonRT and FonRT;
  enddef;
  def map between cell and IK1 for
    vars i_K1 and i_K1;
    vars failing and failing;
    vars V and V;
    vars FonRT and FonRT;
  enddef;
  def map between cell and INab for
    vars i_b_Na and i_b_Na;
    vars failing and failing;
    vars V and V;
  enddef;
  def map between cell and ICab for
    vars i_b_Ca and i_b_Ca;
    vars failing and failing;
    vars V and V;
  enddef;
  def map between cell and INaCa for
    vars i_NaCa and i_NaCa;
    vars failing and failing;
    vars V and V;
    vars FonRT and FonRT;
  enddef;
  def map between cell and INaK for
    vars i_NaK and i_NaK;
    vars failing and failing;
    vars V and V;
    vars FonRT and FonRT;
  enddef;
  def map between cell and Ionic_concentrations for
    vars F and F;
    vars Cm and Cm;
    vars i_Stim and i_Stim;
  enddef;
  def map between cell and Irel for
    vars F and F;
    vars dVdt and dVdt;
    vars Cm and Cm;
    vars i_Stim and i_Stim;
  enddef;
  def map between cell and Iup for
    vars failing and failing;
  enddef;
  def map between cell and Ileak for
    vars failing and failing;
  enddef;
  def map between Irel and INaCa for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Irel and ICa for
    vars i_Ca and i_Ca;
  enddef;
  def map between Irel and ICab for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between INa and Ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between INa and INab for
    vars E_Na and E_Na;
  enddef;
  def map between ICa and Ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca and i_Ca;
  enddef;
  def map between ICa and ICab for
    vars E_Ca and E_Ca;
  enddef;
  def map between Ito and Ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_to and i_to;
  enddef;
  def map between IKs and Ionic_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_Ks and i_Ks;
  enddef;
  def map between IKr and Ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_Kr and i_Kr;
  enddef;
  def map between IK1 and Ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between INaCa and Ionic_concentrations for
    vars Cai and Cai;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between INab and Ionic_concentrations for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between ICab and Ionic_concentrations for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between INaK and Ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between Irel and Ionic_concentrations for
    vars i_rel and i_rel;
    vars Cai and Cai;
    vars Ca_JSR and Ca_JSR;
    vars V_myo and V_myo;
    vars V_JSR and V_JSR;
  enddef;
  def map between Iup and Ionic_concentrations for
    vars i_up and i_up;
    vars Cai and Cai;
  enddef;
  def map between Ileak and Ionic_concentrations for
    vars i_leak and i_leak;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between Itr and Ionic_concentrations for
    vars i_tr and i_tr;
    vars Ca_NSR and Ca_NSR;
    vars Ca_JSR and Ca_JSR;
  enddef;
  def map between calcium_buffers_in_the_myoplasm and Ionic_concentrations for
    vars Cai and Cai;
    vars Cai_bufc and Cai_bufc;
  enddef;
  def map between calcium_buffers_in_the_JSR and Ionic_concentrations for
    vars Ca_JSR and Ca_JSR;
    vars Ca_JSR_bufc and Ca_JSR_bufc;
  enddef;
  def map between Irel and calcium_buffers_in_the_JSR for
    vars K_mCSQN and K_mCSQN;
  enddef;
  def map between INa and INa_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between INa and INa_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between INa and INa_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICa and ICa_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICa and ICa_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between ICa and ICa_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between Ito and Ito_t_gate for
    vars t and t;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ito and Ito_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between IKs and IKs_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between IKr and IKr_Xr_gate for
    vars Xr and Xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between IK1 and IK1_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K1 and E_K1;
    vars time and time;
    vars V and V;
  enddef;
enddef;
