<?xml version='1.0' encoding='utf-8'?>
<!--  FILE :evans_model_2004.xml

CREATED :  29th May 2004

LAST MODIFIED : 29th May 2004

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Evans et al.'s 2004 mathematical model for the in vitro kinetics of the anti-cancer agent topotecan.

CHANGES:  
  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="evans_errington_shelly_feeney_chapman_godfrey_smith_chappell_2004_version01" name="evans_errington_shelly_feeney_chapman_godfrey_smith_chappell_2004_version01">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Modelling The <emhasis>In Vitro</emhasis> Kinetics Of The Anti-Cancer Agent Topotecan</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This is the original unchecked version of the model imported from the previous
            CellML model repository, 24-Jan-2006.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
The compartmental approach to modelling the kinetics of a drug can be used to provide a mathematical description of the characteristcis of that drug and how it is delivered to a particular target.  With this aim in mind, Evans <emphasis>et al.</emphasis> propose a compartmental model for the anti-cancer agent topotecan (TPT).  The mathematical equations used to describe the physiological processes are based on biological assumptions, and the model parameters are estimated using high performance liquid chromatograpy data.
</para>

<para>
TPT is a water soluble anti-cancer drug which has been approved for use against ovarian and small cell lung carcinomas.  The drug's molecular target is DNA topoismerase I, an enzyme which resolves topological distortions in DAN by cleavage and re-ligation of one strand of the double stranded helix.  TPT administration traps topoismerase I in a covalently bound intermediate complex with DNA.  When the DNA replication machinary collides with this complex, the double stranded DNA breaks apart.  
</para>

<para>
The activity of TPT is pH dependent.  AT physiological pH the active form of the agent is not stable, and it undergoes reversible hydrolisis to form the more stable, inactive form.  The reversible hydrolisis of TPT is first modelled by a linear, two compartment model.  This simple model then forms the basis of a cell based model for drug activity in live cell experiments (see <xref linkend="fig_cell_diagram"/> below).  
</para>

<para>
The cell based model has been described here in CellML (the raw CellML description of the Evans <emphasis>et al.</emphasis> 2004 model can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>).     
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
<ulink url="http://www.sciencedirect.com/science?_ob=ArticleURL&amp;_udi=B6VHX-4BY3WT5-2&amp;_user=140507&amp;_coverDate=06%2F30%2F2004&amp;_alid=185337981&amp;_rdoc=1&amp;_fmt=summary&amp;_orig=search&amp;_qd=1&amp;_cdi=6078&amp;_sort=d&amp;_docanchor=&amp;view=c&amp;_acct=C000011498&amp;_version=1&amp;_urlVersion=0&amp;_userid=140507&amp;md5=360b41bf7c9968426763a59656fa9068">A mathematical model for the in vitro kinetics of the anti-cancer agent topotecan</ulink>, Neil D. Evans, Rachel J. Errington, Micchael Shelley, Graham P. Feeney, Michael J. Chapman, Keith R. Godfrey, Paul J. Smith, Michael J. Chappell, 2004, <ulink url="http://www.sciencedirect.com/science?_ob=JournalURL&amp;_cdi=6078&amp;_auth=y&amp;_acct=C000011498&amp;_version=1&amp;_urlVersion=0&amp;_userid=140507&amp;md5=fed5116015c6d8a21af255eb3e4d8be9">
            <emphasis>Mathematical Biosciences</emphasis>
          </ulink>, 189, 185-217.  (<ulink url="http://www.sciencedirect.com/science?_ob=ArticleURL&amp;_udi=B6VHX-4BY3WT5-2&amp;_coverDate=06%2F30%2F2004&amp;_alid=185337981&amp;_rdoc=1&amp;_fmt=&amp;_orig=search&amp;_qd=1&amp;_cdi=6078&amp;_sort=d&amp;view=c&amp;_acct=C000011498&amp;_version=1&amp;_urlVersion=0&amp;_userid=140507&amp;md5=8cbe33ab0ce681c4ecd08e160f5e0f88">Full text (HTML)</ulink> and PDF versions of the article are available to subscribers on the <emphasis>Mathematical Biosciences</emphasis> website.)  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=15094319&amp;dopt=Abstract">PubMed ID: 15094319</ulink>
</para>

<informalfigure float="0" id="fig_cell_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>cell diagram</title>
    </objectinfo>
    <imagedata fileref="evans_2004.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic diagram of the mathematical model used to investigate the effect of injecting the anticancer drug TPT into a culture of human lymphoma cells.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
    
   <units name="minute">
     <unit units="second" multiplier="60.0"/>
   </units>
   
   <units name="first_order_rate_constant">
     <unit units="minute" exponent="-1"/>
   </units>
   
   <units name="micromolar">
     <unit units="mole" prefix="micro"/>
     <unit units="litre" exponent="-1"/>
   </units>
   
   <units name="per_micromolar_minute">
      <unit units="micromolar" exponent="-1"/>
      <unit units="minute" exponent="-1"/>
   </units>
   
   <units name="picol">
     <unit units="litre" prefix="pico"/>
   </units>
   
   
   <component name="environment">
      <variable units="minute" public_interface="out" name="time"/>
   </component>
   
   <component cmeta:id="Lm" name="Lm">
     <rdf:RDF>
       <rdf:Description rdf:about="Lm">
        <dc:title>Lm</dc:title>
        <dcterms:alternative>TPT-L concentration in the medium  </dcterms:alternative>  
       </rdf:Description>
     </rdf:RDF>  
     <variable units="micromolar" public_interface="out" name="Lm" initial_value="10.0"/>
     
     <variable units="minute" public_interface="in" name="time"/>
     <variable units="first_order_rate_constant" public_interface="in" name="ko_m"/>
     <variable units="first_order_rate_constant" public_interface="in" name="kc_m"/>
     <variable units="first_order_rate_constant" public_interface="in" name="ki"/>
     <variable units="first_order_rate_constant" public_interface="in" name="ke"/>
     <variable units="micromolar" public_interface="in" name="Hm"/>
     <variable units="micromolar" public_interface="in" name="Lc"/>
     <variable units="dimensionless" public_interface="in" name="v1"/>
     
     <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Lm_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Lm </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> kc_m </ci>
              <ci> Hm </ci>
            </apply>
            <apply>
              <times/>
              <apply>
                <divide/>
                <ci> ke </ci>
                <ci> v1 </ci>
              </apply>
              <ci> Lc </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <ci> ko_m </ci>
              <ci> ki </ci>
            </apply>
            <ci> Lm </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="Hm" name="Hm">
     <rdf:RDF>
       <rdf:Description rdf:about="Hm">
        <dc:title>Hm</dc:title>
        <dcterms:alternative>TPT-H concentration in the medium  </dcterms:alternative>  
       </rdf:Description>
     </rdf:RDF>  
     <variable units="micromolar" public_interface="out" name="Hm" initial_value="0.0"/>
     
     <variable units="minute" public_interface="in" name="time"/>
     <variable units="first_order_rate_constant" public_interface="in" name="ko_m"/>
     <variable units="first_order_rate_constant" public_interface="in" name="kc_m"/>
     <variable units="micromolar" public_interface="in" name="Lm"/>
     
     <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Hm_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Hm </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> ko_m </ci>
            <ci> Lm </ci>
          </apply>
          <apply>
            <times/>
            <ci> kc_m </ci>
            <ci> Hm </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="Lc" name="Lc">
     <rdf:RDF>
       <rdf:Description rdf:about="Lc">
        <dc:title>Lc</dc:title>
        <dcterms:alternative>TPT-L concentration in the cytoplasm  </dcterms:alternative>  
       </rdf:Description>
     </rdf:RDF>  
     <variable units="micromolar" public_interface="out" name="Lc" initial_value="0.0"/>
     
     <variable units="minute" public_interface="in" name="time"/>
     <variable units="first_order_rate_constant" public_interface="in" name="ko_c"/>
     <variable units="first_order_rate_constant" public_interface="in" name="kc_c"/>
     <variable units="first_order_rate_constant" public_interface="in" name="ki"/>
     <variable units="first_order_rate_constant" public_interface="in" name="ke"/>
     <variable units="per_micromolar_minute" public_interface="in" name="kb"/>
     <variable units="first_order_rate_constant" public_interface="in" name="kd"/>
     <variable units="micromolar" public_interface="in" name="BT"/>
     <variable units="micromolar" public_interface="in" name="Hc"/>
     <variable units="micromolar" public_interface="in" name="Lm"/>
     <variable units="micromolar" public_interface="in" name="Ln"/>
     <variable units="dimensionless" public_interface="in" name="v1"/>
     <variable units="dimensionless" public_interface="in" name="v2"/>
     
     <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Lc_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Lc </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> ki </ci>
              <ci> v1 </ci>
              <ci> Lm </ci>
            </apply>
            <apply>
              <times/>
              <ci> kc_c </ci>
              <ci> Hc </ci>
            </apply>
            <apply>
              <times/>
              <ci> v2 </ci>
              <ci> kd </ci>
              <ci> Ln </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <apply>
                <plus/>
                <ci> ke </ci>
                <ci> ko_c </ci>
              </apply>
              <ci> Lc </ci>
            </apply>
            <apply>
              <times/>
              <ci> kb </ci>
              <apply>
                <minus/>
                <ci> BT </ci>
                <ci> Ln </ci>
              </apply>
              <ci> Lc </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="Hc" name="Hc">
     <rdf:RDF>
       <rdf:Description rdf:about="Hc">
        <dc:title>Hc</dc:title>
        <dcterms:alternative>TPT-H concentration in the cytoplasm  </dcterms:alternative>  
       </rdf:Description>
     </rdf:RDF>  
     <variable units="micromolar" public_interface="out" name="Hc" initial_value="0.0"/>
     
     <variable units="minute" public_interface="in" name="time"/>
     <variable units="first_order_rate_constant" public_interface="in" name="ko_c"/>
     <variable units="first_order_rate_constant" public_interface="in" name="kc_c"/>
     <variable units="micromolar" public_interface="in" name="Lc"/>
     
     <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Hc_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Hc </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> ko_c </ci>
            <ci> Lc </ci>
          </apply>
          <apply>
            <times/>
            <ci> kc_c </ci>
            <ci> Hc </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="Ln" name="Ln">
     <rdf:RDF>
       <rdf:Description rdf:about="Ln">
        <dc:title>Ln</dc:title>
        <dcterms:alternative>TPT-L concentration in the nucleus  </dcterms:alternative>  
       </rdf:Description>
     </rdf:RDF>  
     <variable units="micromolar" public_interface="out" name="Ln" initial_value="0.0"/>
     
     <variable units="minute" public_interface="in" name="time"/>
     <variable units="per_micromolar_minute" public_interface="in" name="kb"/>
     <variable units="first_order_rate_constant" public_interface="in" name="kd"/>
     <variable units="micromolar" public_interface="in" name="BT"/>
     <variable units="micromolar" public_interface="in" name="Lc"/>
     <variable units="dimensionless" public_interface="in" name="v2"/>
     
     <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Ln_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Ln </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <ci> kb </ci>
              <ci> v2 </ci>
            </apply>
            <apply>
              <minus/>
              <ci> BT </ci>
              <ci> Ln </ci>
            </apply>
            <ci> Lc </ci>
          </apply>
          <apply>
            <times/>
            <ci> kd </ci>
            <ci> Ln </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="kinetic_parameters"> 
    <variable units="first_order_rate_constant" public_interface="out" name="ko_m" initial_value="2.89E-2"/>
    <variable units="first_order_rate_constant" public_interface="out" name="ki" initial_value="3.09E-4"/>
    <variable units="first_order_rate_constant" public_interface="out" name="ke" initial_value="1.0140"/>
    <variable units="first_order_rate_constant" public_interface="out" name="ko_c" initial_value="2.6553E-2"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kc_c" initial_value="1.8637E-1"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kd" initial_value="4.4489"/>
    <variable units="first_order_rate_constant" public_interface="out" name="kc_m" initial_value="1.06E-4"/>
    <variable units="per_micromolar_minute" public_interface="out" name="kb" initial_value="8.5341E-4"/>
    <variable units="micromolar" public_interface="out" name="BT" initial_value="2.89E1"/>
    <variable units="dimensionless" public_interface="out" name="v1"/>
    <variable units="dimensionless" public_interface="out" name="v2"/>  
    
    <variable units="picol" name="Vm"/>
    <variable units="picol" name="Vn"/>
    <variable units="picol" name="Vc"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="v1_eq">
        <eq/>
        <ci> v1 </ci>
        <apply>
          <divide/>
          <ci> Vm </ci>
          <ci> Vc </ci>
        </apply>
      </apply>
      
      <apply id="v2_eq">
        <eq/>
        <ci> v2 </ci>
        <apply>
          <divide/>
          <ci> Vn </ci>
          <ci> Vc </ci>
        </apply>
      </apply>
    </math>
  </component>
  
  
  <connection>
    <map_components component_2="environment" component_1="Lm"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Hm"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Lc"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Hc"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="Ln"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="kinetic_parameters" component_1="Lm"/>
    <map_variables variable_2="ko_m" variable_1="ko_m"/>
    <map_variables variable_2="ki" variable_1="ki"/>
    <map_variables variable_2="ke" variable_1="ke"/>
    <map_variables variable_2="v1" variable_1="v1"/>
    <map_variables variable_2="kc_m" variable_1="kc_m"/>
  </connection>
  
  <connection>
    <map_components component_2="kinetic_parameters" component_1="Hm"/>
    <map_variables variable_2="ko_m" variable_1="ko_m"/>
    <map_variables variable_2="kc_m" variable_1="kc_m"/>
  </connection>
  
  <connection>
    <map_components component_2="kinetic_parameters" component_1="Lc"/>
    <map_variables variable_2="ko_c" variable_1="ko_c"/>
    <map_variables variable_2="ki" variable_1="ki"/>
    <map_variables variable_2="ke" variable_1="ke"/>
    <map_variables variable_2="kd" variable_1="kd"/>
    <map_variables variable_2="kb" variable_1="kb"/>
    <map_variables variable_2="v1" variable_1="v1"/>
    <map_variables variable_2="v2" variable_1="v2"/>
    <map_variables variable_2="BT" variable_1="BT"/>
    <map_variables variable_2="kc_c" variable_1="kc_c"/>
  </connection>
  
  <connection>
    <map_components component_2="kinetic_parameters" component_1="Hc"/>
    <map_variables variable_2="ko_c" variable_1="ko_c"/>
    <map_variables variable_2="kc_c" variable_1="kc_c"/>
  </connection>
  
  <connection>
    <map_components component_2="kinetic_parameters" component_1="Ln"/>
    <map_variables variable_2="BT" variable_1="BT"/>
    <map_variables variable_2="kb" variable_1="kb"/>
    <map_variables variable_2="kd" variable_1="kd"/>
    <map_variables variable_2="v2" variable_1="v2"/>
  </connection>
  
  <connection>
    <map_components component_2="Hm" component_1="Lm"/>
    <map_variables variable_2="Lm" variable_1="Lm"/>
    <map_variables variable_2="Hm" variable_1="Hm"/>
  </connection>
  
  <connection>
    <map_components component_2="Lc" component_1="Lm"/>
    <map_variables variable_2="Lm" variable_1="Lm"/>
    <map_variables variable_2="Lc" variable_1="Lc"/>
  </connection>
  
  <connection>
    <map_components component_2="Hc" component_1="Lc"/>
    <map_variables variable_2="Lc" variable_1="Lc"/>
    <map_variables variable_2="Hc" variable_1="Hc"/>
  </connection>
  
  <connection>
    <map_components component_2="Ln" component_1="Lc"/>
    <map_variables variable_2="Lc" variable_1="Lc"/>
    <map_variables variable_2="Ln" variable_1="Ln"/>
  </connection>


<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  <rdf:Bag rdf:about="rdf:#8b9d3641-a0f0-4893-87f6-3150a1fec584">
    <rdf:li>Topotecan</rdf:li>
    <rdf:li>cancer</rdf:li>
    <rdf:li>Cancer</rdf:li>
    <rdf:li>topotecan</rdf:li>
    <rdf:li>pharmacokinetics</rdf:li>
    <rdf:li>Drug Kinetics</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#43359212-affd-4ca7-9f71-2231609a7b93">
    <rdf:li rdf:resource="rdf:#d29b5eef-e3f9-492b-af6d-2e899541cc07"/>
    <rdf:li rdf:resource="rdf:#950937f7-514e-4ce6-8331-aa610b0c08f0"/>
    <rdf:li rdf:resource="rdf:#28ce0086-1f88-41de-9864-8a0acda85944"/>
    <rdf:li rdf:resource="rdf:#28fb5ead-bf15-4e77-96d6-483ff88f71f0"/>
    <rdf:li rdf:resource="rdf:#ae61048c-71a7-41ba-a0ce-104904c85f2d"/>
    <rdf:li rdf:resource="rdf:#a642afa0-43b1-4f72-9e0e-9df6d5625cf5"/>
    <rdf:li rdf:resource="rdf:#4764ce5c-164d-4b58-b68f-c94bab4a2280"/>
    <rdf:li rdf:resource="rdf:#4bb57702-8474-4926-8a85-1930ae446bf0"/>
  </rdf:Seq>
  <rdf:Description rdf:about="rdf:#950937f7-514e-4ce6-8331-aa610b0c08f0">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#3306a830-3ed2-42c5-bfa7-7bd055dd676a"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a642afa0-43b1-4f72-9e0e-9df6d5625cf5">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#b887ce42-7cad-45b2-9e57-29992cbb959e"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ae61048c-71a7-41ba-a0ce-104904c85f2d">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#2ae3bb9c-19b9-4758-bfe9-733d9b14effd"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b887ce42-7cad-45b2-9e57-29992cbb959e">
    <vCard:Given>Keith</vCard:Given>
    <vCard:Family>Godfrey</vCard:Family>
    <vCard:Other>R</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#ee646c51-8213-487d-9627-785485b3e2eb">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#8b9d3641-a0f0-4893-87f6-3150a1fec584"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#1bd203c4-a15e-47bf-a844-bec2792ce897">
    <dc:subject rdf:resource="rdf:#ee646c51-8213-487d-9627-785485b3e2eb"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#110821e3-cfd0-4227-92ea-b27aff683d49">
    <vCard:ORG rdf:resource="rdf:#90b18a09-65ee-45d0-a62d-b241ce2640f0"/>
    <vCard:EMAIL rdf:resource="rdf:#7819c63e-7bc5-4fdb-99cf-ed5749517533"/>
    <vCard:N rdf:resource="rdf:#8c7a441a-4ec4-43cd-b93b-aae8e16f32d5"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e2074a02-ee20-4228-9ccf-9f1b23f6d710">
    <dcterms:W3CDTF>2004-06</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#28ce0086-1f88-41de-9864-8a0acda85944">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#d4311e59-ef08-4215-af1f-0da4f18ca14d"/>
  </rdf:Description>
  <rdf:Description rdf:about="">
    <dc:publisher>
        The University of Auckland, Bioengineering Institute
      </dc:publisher>
    <dcterms:created rdf:resource="rdf:#84e15be3-bcf9-49bd-add4-08e012f1e947"/>
    <dc:creator rdf:resource="rdf:#110821e3-cfd0-4227-92ea-b27aff683d49"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#28fb5ead-bf15-4e77-96d6-483ff88f71f0">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#a85e06eb-9020-48e1-b37b-ac8522b28e2c"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#8c7a441a-4ec4-43cd-b93b-aae8e16f32d5">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#473240b3-8a5f-4b70-a521-f01b99c43717">
    <vCard:Given>Neil</vCard:Given>
    <vCard:Family>Evans</vCard:Family>
    <vCard:Other>D</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c4b55464-a9d7-42c9-b156-9bb60596b219">
    <bqs:Pubmed_id>15094319</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#3cc74895-1d69-47e6-9a62-91bee09f51c3"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a85e06eb-9020-48e1-b37b-ac8522b28e2c">
    <vCard:Given>Graham</vCard:Given>
    <vCard:Family>Feeney</vCard:Family>
    <vCard:Other>P</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#dc8532ac-cded-454a-8291-1d71a5acaac3">
    <dc:creator rdf:resource="rdf:#44e2bde2-5cca-4a8c-9fee-1a39803692d0"/>
    <rdf:value>
          This is the CellML descripition of Evans et al.'s 2004 mathematical model for the in vitro kinetics of the anti-cancer agent topotecan.
        </rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4bb57702-8474-4926-8a85-1930ae446bf0">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#6a9f679d-bc86-47c6-b499-6bccdc726fbc"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2ae3bb9c-19b9-4758-bfe9-733d9b14effd">
    <vCard:Given>Michael</vCard:Given>
    <vCard:Family>Chapman</vCard:Family>
    <vCard:Other>J</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#6a9f679d-bc86-47c6-b499-6bccdc726fbc">
    <vCard:Given>Michael</vCard:Given>
    <vCard:Family>Chappell</vCard:Family>
    <vCard:Other>J</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#90b18a09-65ee-45d0-a62d-b241ce2640f0">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d29b5eef-e3f9-492b-af6d-2e899541cc07">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#473240b3-8a5f-4b70-a521-f01b99c43717"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d4311e59-ef08-4215-af1f-0da4f18ca14d">
    <vCard:Given>Michael</vCard:Given>
    <vCard:Family>Shelly</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#44e2bde2-5cca-4a8c-9fee-1a39803692d0">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#c6317d72-1d93-4733-bb1a-b3f409b8b3e9">
    <dc:title>Mathematical Biosciences</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3306a830-3ed2-42c5-bfa7-7bd055dd676a">
    <vCard:Given>Rachel</vCard:Given>
    <vCard:Family>Errington</vCard:Family>
    <vCard:Other>J</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#4764ce5c-164d-4b58-b68f-c94bab4a2280">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#285147ad-1f69-469d-b313-2d7aa257941f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3cc74895-1d69-47e6-9a62-91bee09f51c3">
    <dc:creator rdf:resource="rdf:#43359212-affd-4ca7-9f71-2231609a7b93"/>
    <dc:title>
            A mathematical model for the in vitro kinetics of the anti-cancer agent topotecan
          </dc:title>
    <bqs:volume>189</bqs:volume>
    <bqs:first_page>185</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#c6317d72-1d93-4733-bb1a-b3f409b8b3e9"/>
    <dcterms:issued rdf:resource="rdf:#e2074a02-ee20-4228-9ccf-9f1b23f6d710"/>
    <bqs:last_page>217</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#285147ad-1f69-469d-b313-2d7aa257941f">
    <vCard:Given>Paul</vCard:Given>
    <vCard:Family>Smith</vCard:Family>
    <vCard:Other>J</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#84e15be3-bcf9-49bd-add4-08e012f1e947">
    <dcterms:W3CDTF>2004-05-29</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#7819c63e-7bc5-4fdb-99cf-ed5749517533">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="#evans_errington_shelly_feeney_chapman_godfrey_smith_chappell_2004_version01">
    <dc:title>
        Evans et al.'s 2004 mathematical model for the in vitro kinetics of the anti-cancer agent topotecan.
      </dc:title>
    <cmeta:comment rdf:resource="rdf:#dc8532ac-cded-454a-8291-1d71a5acaac3"/>
    <bqs:reference rdf:resource="rdf:#1bd203c4-a15e-47bf-a844-bec2792ce897"/>
    <bqs:reference rdf:resource="rdf:#c4b55464-a9d7-42c9-b156-9bb60596b219"/>
  </rdf:Description>
</rdf:RDF>
</model>
