<?xml version="1.0" encoding="utf-8"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="komarova_2003" name="komarova_2003">

<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Mathematical model predicts a critical role for osteoclast autocrine regulation in the control of bone remodeling</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
<section id="sec_status">
    <title>Model Status</title>
    <para>
        This CellML model runs in both OpenCell and COR to recreate the published results (the oscillating model in figure 3). The parameter values have been set to those in the legend of figure 3. Note there appears to be a typographical error in equation A2 in the published paper: 1-(g11/gamma) has been changed to (1-g11)gamma to be consistent with equations A1 and A3.
          </para>
  </section>
  <sect1 id="sec_structure">
  <title>Model Structure</title>

<para>
ABSTRACT: Bone remodeling occurs asynchronously at multiple sites in the adult skeleton and involves resorption by osteoclasts, followed by formation of new bone by osteoblasts. Disruptions in bone remodeling contribute to the pathogenesis of disorders such as osteoporosis, osteoarthritis, and Paget's disease. Interactions among cells of osteoblast and osteoclast lineages are critical in the regulation of bone remodeling. We constructed a mathematical model of autocrine and paracrine interactions among osteoblasts and osteoclasts that allowed us to calculate cell population dynamics and changes in bone mass at a discrete site of bone remodeling. The model predicted different modes of dynamic behavior: a single remodeling cycle in response to an external stimulus, a series of internally regulated cycles of bone remodeling, or unstable behavior similar to pathological bone remodeling in Paget's disease. Parametric analysis demonstrated that the mode of dynamic behavior in the system depends strongly on the regulation of osteoclasts by autocrine factors, such as transforming growth factor beta. Moreover, simulations demonstrated that nonlinear dynamics of the system may explain the differing effects of immunosuppressants on bone remodeling in vitro and in vivo. In conclusion, the mathematical model revealed that interactions among osteoblasts and osteoclasts result in complex, nonlinear system behavior, which cannot be deduced from studies of each cell type alone. The model will be useful in future studies assessing the impact of cytokines, growth factors, and potential therapies on the overall process of remodeling in normal bone and in pathological conditions such as osteoporosis and Paget's disease.
</para>

<informalfigure float="0" id="fig_reaction_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>model diagram</title>
    </objectinfo>
    <imagedata fileref="komarova_2003.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic representation of interactions between osteoclasts and osteoblasts included in the model. Thick arrows represent the processes of formation and removal of osteoclasts and osteoblasts. Fine arrows represent the effects of autocrine and paracrine regulators of bone remodeling on the rates of osteoclast and osteoblast formation. TGF-beta, transforming growth factor beta, released and activated by resorbing osteoclasts, directly stimulates formation of osteoclasts and osteoblasts. IGF, insulin-like growth factors, secreted by osteoblasts and released by resorbing osteoclasts, activate osteoblast formation. RANKL, expressed on and released by osteoblasts, activates osteoclastogenesis. OPG, osteoprotegerin, released by osteoblasts, inhibits the actions of RANKL. </caption>
</informalfigure>

<para>
The original paper reference is cited below:
</para>

<para>
Mathematical model predicts a critical role for osteoclast autocrine regulation in the control of bone remodeling, Komarova SV, Smith RJ, Dixon SJ, Sims SM, Wahl LM, 2003, <emphasis>Bone</emphasis>, 33, 206-215. <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/14499354">PubMed ID: 14499354</ulink>
</para>

</sect1>
</article>
</documentation> 




  <units name="day">
    <unit multiplier="86400.0" units="second"/>
  </units>
  
  <units base_units="yes" name="cell"/>
  
  <units base_units="yes" name="percent"/>
  
  <units name="flux">
    <unit units="cell"/>
	<unit exponent="-1" units="day"/>
  </units>
  
  <units name="first_order_rate_constant">
    <unit exponent="-1" units="day"/>
  </units>
  
  <units name="second_order_rate_constant">
    <unit exponent="-1" units="cell"/>
	<unit exponent="-1" units="day"/>
  </units>
  
  <units name="percent_per_cell_per_day">
    <unit units="percent"/>
	<unit exponent="-1" units="cell"/>
	<unit exponent="-1" units="day"/>
  </units>
  
  
  <component name="environment">
    <variable cmeta:id="environment_time" name="time" public_interface="out" units="day"/>
  </component>

  <component cmeta:id="x1" name="x1">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#x1">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">x1</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">number of osteoclasts</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="x1_x1" initial_value="10.06066" name="x1" public_interface="out" units="cell"/>
    
    <variable name="alpha1" public_interface="in" units="flux"/>
    <variable name="beta1" public_interface="in" units="first_order_rate_constant"/>
    <variable name="g11" public_interface="in" units="dimensionless"/>
    <variable name="g21" public_interface="in" units="dimensionless"/>
	<variable name="x2" public_interface="in" units="cell"/>
    <variable name="time" public_interface="in" units="day"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> x1 </ci> 
        </apply>
		<apply>
          <minus/>
		  <apply>
            <times/>
            <ci> alpha1 </ci>
            <apply>
              <power/>
			  <ci> x1 </ci>
			  <ci> g11 </ci>
            </apply>
	        <apply>
              <power/>
		      <ci> x2 </ci>
			  <ci> g21 </ci>
            </apply>
          </apply>
		  <apply>
            <times/>
            <ci> beta1 </ci>
			<ci> x1 </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="x2" name="x2">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#x2">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">x2</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">number of osteoblasts</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="x2_x2" initial_value="212.132" name="x2" public_interface="out" units="cell"/>
    
    <variable name="alpha2" public_interface="in" units="first_order_rate_constant"/>
    <variable name="beta2" public_interface="in" units="first_order_rate_constant"/>
    <variable name="g12" public_interface="in" units="dimensionless"/>
    <variable name="g22" public_interface="in" units="dimensionless"/>
	<variable name="x1" public_interface="in" units="cell"/>
    <variable name="time" public_interface="in" units="day"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> x2 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> alpha2 </ci>
            <apply>
              <power/>
			  <ci> x1 </ci>
			  <ci> g12 </ci>
            </apply>
			<apply>
              <power/>
			  <ci> x2 </ci>
			  <ci> g22 </ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci> beta2 </ci>
            <ci> x2 </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="z" name="z">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#z">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">z</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">total bone mass</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="z_z" initial_value="100.0" name="z" public_interface="out" units="percent"/>
    
    <variable name="k1" public_interface="in" units="percent_per_cell_per_day"/>
    <variable name="k2" public_interface="in" units="percent_per_cell_per_day"/>
    <variable name="y1" public_interface="in" units="cell"/>
    <variable name="y2" public_interface="in" units="cell"/>
    <variable name="time" public_interface="in" units="day"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> z </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> k2 </ci>
            <ci> y2 </ci>
		  </apply>
          <apply>
            <times/>
            <ci> k1 </ci>
            <ci> y1 </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="y1" name="y1">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#y1">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">y1</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">number of actively resorbing bone cells</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="y1_y1" name="y1" public_interface="out" units="cell"/>
    
    <variable name="x1" public_interface="in" units="cell"/>
    <variable name="x1_bar" public_interface="in" units="cell"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> y1 </ci> 
        <piecewise>
          <piece>
            <apply>
              <minus/>
			  <ci> x1 </ci>
              <ci> x1_bar </ci>
		    </apply>
			<apply>
              <gt/>
			  <ci> x1 </ci>
              <ci> x1_bar </ci>
		    </apply>
          </piece>
          <otherwise>
		    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="cell"> 0.0 </cn>
          </otherwise>
        </piecewise>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="y2" name="y2">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#y2">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">y2</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">number of actively forming bone cells</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="y2_y2" name="y2" public_interface="out" units="cell"/>
    
    <variable name="x2" public_interface="in" units="cell"/>
    <variable name="x2_bar" public_interface="in" units="cell"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> y2 </ci> 
        <piecewise>
          <piece>
            <apply>
              <minus/>
			  <ci> x2 </ci>
              <ci> x2_bar </ci>
		    </apply>
			<apply>
              <gt/>
			  <ci> x2 </ci>
              <ci> x2_bar </ci>
		    </apply>
          </piece>
          <otherwise>
		    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="cell"> 0.0 </cn>
          </otherwise>
        </piecewise>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="x1_bar" name="x1_bar">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#x1_bar">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">x1_bar</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">number of osteoclasts at steady state</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="x1_bar_x1_bar" name="x1_bar" public_interface="out" units="cell"/>
    
    <variable name="alpha1" public_interface="in" units="flux"/>
    <variable name="beta1" public_interface="in" units="first_order_rate_constant"/>
	<variable name="alpha2" public_interface="in" units="first_order_rate_constant"/>
    <variable name="beta2" public_interface="in" units="first_order_rate_constant"/>
    <variable name="g22" public_interface="in" units="dimensionless"/>
    <variable name="g21" public_interface="in" units="dimensionless"/>
	<variable name="gamma" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> x1_bar </ci> 
        <apply>
          <times/>
		  <apply>
            <power/>
			<apply>
              <divide/>
              <ci> beta1 </ci>
			  <ci> alpha1 </ci>
			</apply>
			<apply>
              <divide/>
			  <apply>
                <minus/>
				<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                <ci> g22 </ci>
              </apply>
			  <ci> gamma </ci>
            </apply>
          </apply>
		  <apply>
            <power/>
			<apply>
              <divide/>
              <ci> beta2 </ci>
			  <ci> alpha2 </ci>
            </apply>
			<apply>
              <divide/>
			  <ci> g21 </ci>
              <ci> gamma </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component cmeta:id="x2_bar" name="x2_bar">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
      <rdf:Description rdf:about="#x2_bar">
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">x2_bar</dc:title>
        <dcterms:alternative xmlns:dcterms="http://purl.org/dc/terms/">number of osteoblasts at steady state</dcterms:alternative>
      </rdf:Description>
    </rdf:RDF>  
    <variable cmeta:id="x2_bar_x2_bar" name="x2_bar" public_interface="out" units="cell"/>
    
    <variable name="alpha1" public_interface="in" units="flux"/>
    <variable name="beta1" public_interface="in" units="first_order_rate_constant"/>
	<variable name="alpha2" public_interface="in" units="first_order_rate_constant"/>
    <variable name="beta2" public_interface="in" units="first_order_rate_constant"/>
    <variable name="g11" public_interface="in" units="dimensionless"/>
    <variable name="g12" public_interface="in" units="dimensionless"/>
	<variable name="gamma" public_interface="in" units="dimensionless"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> x2_bar </ci> 
        <apply>
          <times/>
          <apply>
            <power/>
			<apply>
              <divide/>
              <ci> beta1 </ci>
			  <ci> alpha1 </ci>
            </apply>
			<apply>
              <divide/>
			  <ci> g12 </ci>
              <ci> gamma </ci>
            </apply>
          </apply>
		  <apply>
            <power/>
			<apply>
              <divide/>
              <ci> beta2 </ci>
			  <ci> alpha2 </ci>
            </apply>
			<apply>
              <divide/>
			  <apply>
                <minus/>
				<cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
                <ci> g11 </ci>
              </apply>
			  <ci> gamma </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  <component name="model_parameters"> 
    <variable initial_value="3" name="alpha1" public_interface="out" units="flux"/>
    <variable initial_value="0.2" name="beta1" public_interface="out" units="first_order_rate_constant"/>
	<variable initial_value="4" name="alpha2" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="0.02" name="beta2" public_interface="out" units="first_order_rate_constant"/>
    <variable initial_value="0.093" name="k1" public_interface="out" units="percent_per_cell_per_day"/>
    <variable initial_value="0.0008" name="k2" public_interface="out" units="percent_per_cell_per_day"/>
    <variable initial_value="1.1" name="g11" public_interface="out" units="dimensionless"/>
    <variable initial_value="-0.5" name="g21" public_interface="out" units="dimensionless"/>
	<variable initial_value="1" name="g12" public_interface="out" units="dimensionless"/>
    <variable initial_value="0" name="g22" public_interface="out" units="dimensionless"/>
    <variable name="gamma" public_interface="out" units="dimensionless"/>
  
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <ci> gamma </ci> 
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci> g12 </ci> 
			<ci> g21 </ci>
          </apply>
		  <apply>
            <times/>
			<apply>
              <minus/>
			  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
			  <ci> g11 </ci>
            </apply>
			<apply>
              <minus/>
			  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
			  <ci> g22 </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>

  
  <connection>
    <map_components component_1="x1" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="x2" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="z" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="x2" component_2="x1"/>
    <map_variables variable_1="x1" variable_2="x1"/>
	<map_variables variable_1="x2" variable_2="x2"/>
  </connection>

  <connection>
    <map_components component_1="x1" component_2="model_parameters"/>
    <map_variables variable_1="alpha1" variable_2="alpha1"/>
    <map_variables variable_1="beta1" variable_2="beta1"/>
    <map_variables variable_1="g11" variable_2="g11"/>
    <map_variables variable_1="g21" variable_2="g21"/>
  </connection>
  
  <connection>
    <map_components component_1="x2" component_2="model_parameters"/>
    <map_variables variable_1="alpha2" variable_2="alpha2"/>
    <map_variables variable_1="beta2" variable_2="beta2"/>
    <map_variables variable_1="g12" variable_2="g12"/>
    <map_variables variable_1="g22" variable_2="g22"/>
  </connection>

  <connection>
    <map_components component_1="y1" component_2="z"/>
    <map_variables variable_1="y1" variable_2="y1"/>
  </connection>
  
  <connection>
    <map_components component_1="y2" component_2="z"/>
    <map_variables variable_1="y2" variable_2="y2"/>
  </connection>
  
  <connection>
    <map_components component_1="z" component_2="model_parameters"/>
    <map_variables variable_1="k1" variable_2="k1"/>
    <map_variables variable_1="k2" variable_2="k2"/>
  </connection>

  <connection>
    <map_components component_1="x1" component_2="y1"/>
    <map_variables variable_1="x1" variable_2="x1"/>
  </connection>
  
  <connection>
    <map_components component_1="x1_bar" component_2="y1"/>
    <map_variables variable_1="x1_bar" variable_2="x1_bar"/>
  </connection>
  
  <connection>
    <map_components component_1="x2" component_2="y2"/>
    <map_variables variable_1="x2" variable_2="x2"/>
  </connection>
  
  <connection>
    <map_components component_1="x2_bar" component_2="y2"/>
    <map_variables variable_1="x2_bar" variable_2="x2_bar"/>
  </connection>

  <connection>
    <map_components component_1="x1_bar" component_2="model_parameters"/>
    <map_variables variable_1="beta1" variable_2="beta1"/>
    <map_variables variable_1="alpha1" variable_2="alpha1"/>
    <map_variables variable_1="beta2" variable_2="beta2"/>
    <map_variables variable_1="alpha2" variable_2="alpha2"/>
	<map_variables variable_1="g21" variable_2="g21"/>
    <map_variables variable_1="g22" variable_2="g22"/>
	<map_variables variable_1="gamma" variable_2="gamma"/>
  </connection>
  
  <connection>
    <map_components component_1="x2_bar" component_2="model_parameters"/>
    <map_variables variable_1="beta1" variable_2="beta1"/>
    <map_variables variable_1="alpha1" variable_2="alpha1"/>
    <map_variables variable_1="beta2" variable_2="beta2"/>
    <map_variables variable_1="alpha2" variable_2="alpha2"/>
	<map_variables variable_1="g11" variable_2="g11"/>
    <map_variables variable_1="g12" variable_2="g12"/>
	<map_variables variable_1="gamma" variable_2="gamma"/>
  </connection>
  
  <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
    
	<rdf:Description rdf:about="">
      <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
            Mathematical model predicts a critical role for osteoclast autocrine regulation in the control of bone remodeling: multiple bone remodeling cycles
          </dc:title>
		<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
        <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <vCard:Family>Lloyd</vCard:Family>
          <vCard:Given>Catherine</vCard:Given>
		  <vCard:Other>May</vCard:Other>
        </vCard:N>
        <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
          <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
        </vCard:EMAIL>
        <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
          <vCard:Orgname>The University of Auckland</vCard:Orgname>
          <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
        </vCard:ORG>
      </dc:creator>
    </rdf:Description>
    
    <rdf:Description rdf:about="#komarova_2003">
      
	  <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
        <dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
          <bqs:subject_type>keyword</bqs:subject_type>
          <rdf:value>
            <rdf:Bag>
              <rdf:li>osteoclast</rdf:li>
			  <rdf:li>osteoblast</rdf:li>
			  <rdf:li>bone</rdf:li>
			  <rdf:li>endocrine</rdf:li>
            </rdf:Bag>
          </rdf:value>
        </dc:subject>
      </bqs:reference>

      <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
        <bqs:Pubmed_id>14499354</bqs:Pubmed_id>
        <bqs:JournalArticle rdf:parseType="Resource">
          <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
            <rdf:Seq>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Komarova</vCard:Family>
                    <vCard:Given>S</vCard:Given>
					<vCard:Other>V</vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Smith</vCard:Family>
                    <vCard:Given>R</vCard:Given>
					<vCard:Other>J</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
              <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Dixon</vCard:Family>
                    <vCard:Given>S</vCard:Given>
					<vCard:Other>J</vCard:Other>
                  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Sims</vCard:Family>
                    <vCard:Given>S</vCard:Given>
					<vCard:Other>M</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
			  <rdf:li rdf:parseType="Resource">
                <bqs:Person rdf:parseType="Resource">
                  <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                    <vCard:Family>Wahl</vCard:Family>
                    <vCard:Given>L</vCard:Given>
					<vCard:Other>M</vCard:Other>
				  </vCard:N>
                </bqs:Person>
              </rdf:li>
            </rdf:Seq>
          </dc:creator>
          <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
            Mathematical model predicts a critical role for osteoclast autocrine regulation in the control of bone remodeling
          </dc:title>
          <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
            <dcterms:W3CDTF>2003-08</dcterms:W3CDTF>
          </dcterms:issued>
          <bqs:Journal rdf:parseType="Resource">
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Bone</dc:title>
          </bqs:Journal>
		  <bqs:volume>33</bqs:volume>
          <bqs:first_page>206</bqs:first_page>
          <bqs:last_page>215</bqs:last_page>
        </bqs:JournalArticle>
      </bqs:reference>
    </rdf:Description>
  </rdf:RDF>
</model>