<?xml version="1.0"?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:ns7="http://www.cellml.org/metadata/simulation/1.0#" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" xml:base="file:///H:/bertram_previte_sherman_kinard_satin_2000/bertram_previte_sherman_kinard_satin_2000_slow.cellml" cmeta:id="bertram_2000_slow" name="bertram_2000_slow">
      <documentation xmlns="http://cellml.org/tmp-documentation">
            <article>
                  <articleinfo>
                        <title>The phantom burster model for pancreatic beta-cells</title>
                        <author>
                              <firstname>Catherine</firstname>
                              <surname>Lloyd</surname>
                              <affiliation>
                                    <shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
                              </affiliation>
                        </author>
                  </articleinfo>
                  <section id="sec_status">
                        <title>Model Status</title>
                        <para> This model has been rebuilt according to the author's original XPPAUT code, which can be found <ulink url="http://www.math.fsu.edu/~bertram/software/islet/BJ_04a.ode">here</ulink>. This version of the CellML model represents the slow bursting model where gs1=3.  The model replicates figure 4 in the published paper (please note you need to run the model for at least 300 seconds to get past the initial unstable stage).  The model runs in both PCEnv and COR and the units are consistent.						</para>
                  </section>
                  <sect1 id="sec_structure">
                        <title>Model Structure</title>
                        <para>ABSTRACT: Pancreatic beta-cells exhibit bursting oscillations with a wide range of periods. Whereas periods in isolated cells are generally either a few seconds or a few minutes, in intact islets of Langerhans they are intermediate (10-60 s). We develop a mathematical model for beta-cell electrical activity capable of generating this wide range of bursting oscillations. Unlike previous models, bursting is driven by the interaction of two slow processes, one with a relatively small time constant (1-5 s) and the other with a much larger time constant (1-2 min). Bursting on the intermediate time scale is generated without need for a slow process having an intermediate time constant, hence phantom bursting. The model suggests that isolated cells exhibiting a fast pattern may nonetheless possess slower processes that can be brought out by injecting suitable exogenous currents. Guided by this, we devise an experimental protocol using the dynamic clamp technique that reliably elicits islet-like, medium period oscillations from isolated cells. Finally, we show that strong electrical coupling between a fast burster and a slow burster can produce synchronized medium bursting, suggesting that islets may be composed of cells that are intrinsically either fast or slow, with few or none that are intrinsically medium.</para>
                        <para>The original paper reference is cited below:</para>
                        <para>The phantom burster model for pancreatic beta-cells, Richard Bertram, Joseph Previte, Arthur Sherman, Tracie A. Kinard and Leslie S. Satin, 2000,
                                    <emphasis>Biophysical Journal</emphasis>, 79, 2880-2892. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11106596&amp;dopt=Abstract">PubMed ID: 11106596</ulink>
                        </para>
                        <informalfigure float="0" id="fig_cell_diagram">
                              <mediaobject>
                                    <imageobject>
                                          <objectinfo>
                                                <title>cell schematic for the model</title>
                                          </objectinfo>
                                          <imagedata fileref="bertram_2000.png"/>
                                    </imageobject>
                              </mediaobject>
                              <caption>Schematic diagram of the pancreatic beta-cell plasma membrane showing the ionic currents captured by the phantom burster model.</caption>
                        </informalfigure>
                  </sect1>
            </article>
      </documentation>
	  
      <units name="minute">
            <unit multiplier="60" units="second"/>
      </units>
      <units name="femtoA">
            <unit prefix="femto" units="ampere"/>
      </units>
      <units name="femtoF">
            <unit prefix="femto" units="farad"/>
      </units>
      <units name="millivolt">
            <unit prefix="milli" units="volt"/>
      </units>
      <units name="picoS">
            <unit prefix="pico" units="siemens"/>
      </units>
      <units name="millisecond">
            <unit prefix="milli" units="second"/>
      </units>
      <component name="environment">
            <variable cmeta:id="environment_time" name="time" public_interface="out" units="millisecond"/>
      </component>
      <component name="membrane">
            <variable name="time" public_interface="in" units="millisecond"/>
            <variable initial_value="4524" name="Cm" units="femtoF"/>
            <variable cmeta:id="membrane_V" initial_value="-43" name="V" public_interface="out" units="millivolt"/>
            <variable cmeta:id="id_00001" name="ICa" public_interface="in" units="femtoA"/>
            <variable cmeta:id="id_00005" name="IK" public_interface="in" units="femtoA"/>
            <variable cmeta:id="id_00016" name="Il" public_interface="in" units="femtoA"/>
            <variable cmeta:id="id_00020" name="Is1" public_interface="in" units="femtoA"/>
            <variable cmeta:id="id_00019" name="Is2" public_interface="in" units="femtoA"/>
            <math xmlns="http://www.w3.org/1998/Math/MathML">
                  <apply>
                        <eq/>
                        <apply>
                              <diff/>
                              <bvar>
                                    <ci>time</ci>
                              </bvar>
                              <ci>V</ci>
                        </apply>
                        <apply>
                              <divide/>
                              <apply>
                                    <minus/>
                                    <apply>
                                          <plus/>
                                          <ci>ICa</ci>
                                          <ci>IK</ci>
                                          <ci>Il</ci>
                                          <ci>Is1</ci>
                                          <ci>Is2</ci>
                                    </apply>
                              </apply>
                              <ci>Cm</ci>
                        </apply>
                  </apply>
            </math>
      </component>
      <component cmeta:id="id_00002" name="Ca_current">
            <variable name="time" public_interface="in" units="millisecond"/>
            <variable name="V" public_interface="in" units="millivolt"/>
            <variable initial_value="-22" name="Vm" units="millivolt"/>
            <variable cmeta:id="id_00003" initial_value="100" name="VCa" units="millivolt"/>
            <variable cmeta:id="id_00004" initial_value="280" name="gCa" units="picoS"/>
            <variable name="minf" units="dimensionless"/>
            <variable initial_value="7.5" name="sm" units="millivolt"/>
            <variable cmeta:id="Ca_current_ICa" name="ICa" public_interface="out" units="femtoA"/>
            <math xmlns="http://www.w3.org/1998/Math/MathML">
                  <apply>
                        <eq/>
                        <ci>minf</ci>
                        <apply>
                              <divide/>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                              <apply>
                                    <plus/>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                    <apply>
                                          <exp/>
                                          <apply>
                                                <divide/>
                                                <apply>
                                                      <minus/>
                                                      <ci>Vm</ci>
                                                      <ci>V</ci>
                                                </apply>
                                                <ci>sm</ci>
                                          </apply>
                                    </apply>
                              </apply>
                        </apply>
                  </apply>
                  <apply>
                        <eq/>
                        <ci>ICa</ci>
                        <apply>
                              <times/>
                              <ci>gCa</ci>
                              <ci>minf</ci>
                              <apply>
                                    <minus/>
                                    <ci>V</ci>
                                    <ci>VCa</ci>
                              </apply>
                        </apply>
                  </apply>
            </math>
      </component>
      <component cmeta:id="id_00006" name="rapid_K_current">
            <variable name="time" public_interface="in" units="millisecond"/>
            <variable cmeta:id="rapid_K_current_IK" name="IK" public_interface="out" units="femtoA"/>
            <variable cmeta:id="id_00007" initial_value="-80" name="VK" public_interface="out" units="millivolt"/>
            <variable name="V" public_interface="in" units="millivolt"/>
            <variable cmeta:id="id_00008" initial_value="1300" name="gK" units="picoS"/>
            <variable initial_value="0.03" name="n" units="dimensionless"/>
            <variable initial_value="1.1" name="lambda" units="dimensionless"/>
            <variable initial_value="9.09" name="tnbar" units="dimensionless"/>
            <variable initial_value="-9" name="Vn" units="millivolt"/>
            <variable initial_value="10" name="sn" units="millivolt"/>
            <variable name="taun" units="dimensionless"/>
            <variable name="ninf" units="dimensionless"/>
            <math xmlns="http://www.w3.org/1998/Math/MathML">
                  <apply>
                        <eq/>
                        <ci>IK</ci>
                        <apply>
                              <times/>
                              <ci>gK</ci>
                              <ci>n</ci>
                              <apply>
                                    <minus/>
                                    <ci>V</ci>
                                    <ci>VK</ci>
                              </apply>
                        </apply>
                  </apply>
                  <apply>
                        <eq/>
                        <apply>
                              <diff/>
                              <bvar>
                                    <ci>time</ci>
                              </bvar>
                              <ci>n</ci>
                        </apply>
                        <apply>
                              <divide/>
                              <apply>
                                    <times/>
                                    <ci>lambda</ci>
                                    <apply>
                                          <minus/>
                                          <ci>ninf</ci>
                                          <ci>n</ci>
                                    </apply>
                              </apply>
                              <apply>
                                    <times/>
                                    <ci>taun</ci>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">1</cn>
                              </apply>
                        </apply>
                  </apply>
                  <apply>
                        <eq/>
                        <ci>ninf</ci>
                        <apply>
                              <divide/>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                              <apply>
                                    <plus/>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                    <apply>
                                          <exp/>
                                          <apply>
                                                <divide/>
                                                <apply>
                                                      <minus/>
                                                      <ci>Vn</ci>
                                                      <ci>V</ci>
                                                </apply>
                                                <ci>sn</ci>
                                          </apply>
                                    </apply>
                              </apply>
                        </apply>
                  </apply>
                  <apply>
                        <eq/>
                        <ci>taun</ci>
                        <apply>
                              <divide/>
                              <ci>tnbar</ci>
                              <apply>
                                    <plus/>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                    <apply>
                                          <exp/>
                                          <apply>
                                                <divide/>
                                                <apply>
                                                      <minus/>
                                                      <ci>V</ci>
                                                      <ci>Vn</ci>
                                                </apply>
                                                <ci>sn</ci>
                                          </apply>
                                    </apply>
                              </apply>
                        </apply>
                  </apply>
            </math>
      </component>
      <component cmeta:id="id_00009" name="slow_K_current">
            <variable name="time" public_interface="in" units="millisecond"/>
            <variable cmeta:id="slow_K_current_Is1" name="Is1" public_interface="out" units="femtoA"/>
            <variable cmeta:id="id_00010" initial_value="3" name="gs1" units="picoS"/>
            <variable initial_value="0.1" name="s1" units="dimensionless"/>
            <variable name="V" public_interface="in" units="millivolt"/>
            <variable cmeta:id="id_00011" name="VK" public_interface="in" units="millivolt"/>
            <variable name="s1inf" units="dimensionless"/>
            <variable cmeta:id="id_00012" initial_value="-40" name="Vs1" units="millivolt"/>
            <variable initial_value="0.5" name="ss1" units="millivolt"/>
            <variable initial_value="1000" name="taus1" units="dimensionless"/>
            <math xmlns="http://www.w3.org/1998/Math/MathML">
                  <apply>
                        <eq/>
                        <ci>Is1</ci>
                        <apply>
                              <times/>
                              <ci>gs1</ci>
                              <ci>s1</ci>
                              <apply>
                                    <minus/>
                                    <ci>V</ci>
                                    <ci>VK</ci>
                              </apply>
                        </apply>
                  </apply>
                  <apply>
                        <eq/>
                        <ci>s1inf</ci>
                        <apply>
                              <divide/>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                              <apply>
                                    <plus/>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                    <apply>
                                          <exp/>
                                          <apply>
                                                <divide/>
                                                <apply>
                                                      <minus/>
                                                      <ci>Vs1</ci>
                                                      <ci>V</ci>
                                                </apply>
                                                <ci>ss1</ci>
                                          </apply>
                                    </apply>
                              </apply>
                        </apply>
                  </apply>
                  <apply>
                        <eq/>
                        <apply>
                              <diff/>
                              <bvar>
                                    <ci>time</ci>
                              </bvar>
                              <ci>s1</ci>
                        </apply>
                        <apply>
                              <divide/>
                              <apply>
                                    <minus/>
                                    <ci>s1inf</ci>
                                    <ci>s1</ci>
                              </apply>
                              <apply>
                                    <times/>
                                    <ci>taus1</ci>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">1</cn>
                              </apply>
                        </apply>
                  </apply>
            </math>
      </component>
      <component cmeta:id="id_00013" name="very_slow_K_current">
            <variable name="time" public_interface="in" units="millisecond"/>
            <variable name="V" public_interface="in" units="millivolt"/>
            <variable cmeta:id="id_00014" name="VK" public_interface="in" units="millivolt"/>
            <variable initial_value="-42" name="Vs2" units="millivolt"/>
            <variable initial_value="0.434" name="s2" units="dimensionless"/>
            <variable name="s2inf" units="dimensionless"/>
            <variable initial_value="0.4" name="ss2" units="millivolt"/>
            <variable initial_value="32" name="gs2" units="picoS"/>
            <variable initial_value="120000" name="taus2" units="dimensionless"/>
            <variable cmeta:id="very_slow_K_current_Is2" name="Is2" public_interface="out" units="femtoA"/>
            <math xmlns="http://www.w3.org/1998/Math/MathML">
                  <apply>
                        <eq/>
                        <ci>Is2</ci>
                        <apply>
                              <times/>
                              <ci>gs2</ci>
                              <ci>s2</ci>
                              <apply>
                                    <minus/>
                                    <ci>V</ci>
                                    <ci>VK</ci>
                              </apply>
                        </apply>
                  </apply>
                  <apply>
                        <eq/>
                        <ci>s2inf</ci>
                        <apply>
                              <divide/>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                              <apply>
                                    <plus/>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                                    <apply>
                                          <exp/>
                                          <apply>
                                                <divide/>
                                                <apply>
                                                      <minus/>
                                                      <ci>Vs2</ci>
                                                      <ci>V</ci>
                                                </apply>
                                                <ci>ss2</ci>
                                          </apply>
                                    </apply>
                              </apply>
                        </apply>
                  </apply>
                  <apply>
                        <eq/>
                        <apply>
                              <diff/>
                              <bvar>
                                    <ci>time</ci>
                              </bvar>
                              <ci>s2</ci>
                        </apply>
                        <apply>
                              <divide/>
                              <apply>
                                    <minus/>
                                    <ci>s2inf</ci>
                                    <ci>s2</ci>
                              </apply>
                              <apply>
                                    <times/>
                                    <ci>taus2</ci>
                                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="millisecond">1</cn>
                              </apply>
                        </apply>
                  </apply>
            </math>
      </component>
      <component cmeta:id="id_00015" name="leak_current">
            <variable name="time" public_interface="in" units="millisecond"/>
            <variable cmeta:id="leak_current_Il" name="Il" public_interface="out" units="femtoA"/>
            <variable cmeta:id="id_00018" initial_value="25" name="gl" units="picoS"/>
            <variable cmeta:id="id_00017" initial_value="-40" name="Vl" units="millivolt"/>
            <variable name="V" public_interface="in" units="millivolt"/>
            <math xmlns="http://www.w3.org/1998/Math/MathML">
                  <apply>
                        <eq/>
                        <ci>Il</ci>
                        <apply>
                              <times/>
                              <ci>gl</ci>
                              <apply>
                                    <minus/>
                                    <ci>V</ci>
                                    <ci>Vl</ci>
                              </apply>
                        </apply>
                  </apply>
            </math>
      </component>
      <connection>
            <map_components component_1="environment" component_2="membrane"/>
            <map_variables variable_1="time" variable_2="time"/>
      </connection>
      <connection>
            <map_components component_1="Ca_current" component_2="membrane"/>
            <map_variables variable_1="ICa" variable_2="ICa"/>
            <map_variables variable_1="V" variable_2="V"/>
      </connection>
      <connection>
            <map_components component_1="rapid_K_current" component_2="membrane"/>
            <map_variables variable_1="IK" variable_2="IK"/>
            <map_variables variable_1="V" variable_2="V"/>
      </connection>
      <connection>
            <map_components component_1="slow_K_current" component_2="membrane"/>
            <map_variables variable_1="Is1" variable_2="Is1"/>
            <map_variables variable_1="V" variable_2="V"/>
      </connection>
      <connection>
            <map_components component_1="very_slow_K_current" component_2="membrane"/>
            <map_variables variable_1="Is2" variable_2="Is2"/>
            <map_variables variable_1="V" variable_2="V"/>
      </connection>
      <connection>
            <map_components component_1="leak_current" component_2="membrane"/>
            <map_variables variable_1="Il" variable_2="Il"/>
            <map_variables variable_1="V" variable_2="V"/>
      </connection>
      <connection>
            <map_components component_1="environment" component_2="Ca_current"/>
            <map_variables variable_1="time" variable_2="time"/>
      </connection>
      <connection>
            <map_components component_1="environment" component_2="rapid_K_current"/>
            <map_variables variable_1="time" variable_2="time"/>
      </connection>
      <connection>
            <map_components component_1="environment" component_2="slow_K_current"/>
            <map_variables variable_1="time" variable_2="time"/>
      </connection>
      <connection>
            <map_components component_1="rapid_K_current" component_2="slow_K_current"/>
            <map_variables variable_1="VK" variable_2="VK"/>
      </connection>
      <connection>
            <map_components component_1="environment" component_2="very_slow_K_current"/>
            <map_variables variable_1="time" variable_2="time"/>
      </connection>
      <connection>
            <map_components component_1="rapid_K_current" component_2="very_slow_K_current"/>
            <map_variables variable_1="VK" variable_2="VK"/>
      </connection>
      <connection>
            <map_components component_1="environment" component_2="leak_current"/>
            <map_variables variable_1="time" variable_2="time"/>
      </connection>
    
     
<rdf:RDF>
<rdf:Description rdf:about="rdf:#a83e4bca-65e9-41b4-97e7-677a3ca94ff7">
<ns7:boundIntervals>
<rdf:Description rdf:about="rdf:#a80fc084-91f0-459b-8f51-e76994c228c7"/>
</ns7:boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$r4dx31">
<ns7:boundIntervals>
<rdf:Description rdf:about="rdf:#$s4dx31"/>
</ns7:boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$s4dx31">
<rdf:first>
<rdf:Description rdf:about="rdf:#$t4dx31"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$sx2Kt">
<rdf:first>
<rdf:Description rdf:about="rdf:#$tx2Kt"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$tx2Kt">
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">10000</pointDensity>
<ns7:endingValue xml:lang="en">100</ns7:endingValue>
<ns7:maximumStepSize xml:lang="en">0.001</ns7:maximumStepSize>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$t4dx31">
<pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">100000</pointDensity>
<ns7:endingValue xml:lang="en">5000</ns7:endingValue>
<ns7:maximumStepSize xml:lang="en">0.001</ns7:maximumStepSize>
<algorithm xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">bdf15</algorithm>
</rdf:Description>
<rdf:Description rdf:about="rdf:#537ed962-a674-4cf9-a64a-215046b2a8ca">
<rdf:first>
<rdf:Description rdf:about="rdf:#3a8531b7-1d36-4572-af25-9b5a111283ad"/>
</rdf:first>
<rdf:rest>
<rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/>
</rdf:rest>
</rdf:Description>
<rdf:Description rdf:about="#PeAxnu1!T2\">
<ns7:simulation>
<rdf:Description rdf:about="rdf:#$r4dx31"/>
</ns7:simulation>
<ns7:simulation>
<rdf:Description rdf:about="rdf:#$rx2Kt"/>
</ns7:simulation>
</rdf:Description>
<rdf:Description rdf:about="rdf:#$rx2Kt">
<ns7:boundIntervals>
<rdf:Description rdf:about="rdf:#$sx2Kt"/>
</ns7:boundIntervals>
</rdf:Description>
<rdf:Description rdf:about="rdf:#866a151e-844d-41d6-b865-4c9108c277c0">
<ns7:endingValue xml:lang="en">1000</ns7:endingValue>
</rdf:Description>
<rdf:Description rdf:about="#id_00001">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00002">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00003">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00004">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#Ca_current_ICa">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005262"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034704"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005245"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005891"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00005">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00006">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#rapid_K_current_IK">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00007">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00008">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00009">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#slow_K_current_Is1">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00010">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00011">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00012">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00013">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00014">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00015">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00016">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#leak_current_Il">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00017">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00018">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0022840"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00019">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0015272"/>
</isVersionOf>
</rdf:Description>
<rdf:Description rdf:about="#id_00020">
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005267"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0034705"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0005249"/>
</isVersionOf>
<isVersionOf xmlns="http://biomodels.net/biology-qualifiers/">
<rdf:Description rdf:about="http://identifiers.org/go/GO:0008076"/>
</isVersionOf>
</rdf:Description>
</rdf:RDF>
</model>