<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 3/05/2010 at 2:08:19 at p.m. using:

COR (0.9.31.1371)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="cronwright_2002" cmeta:id="cronwright_2002" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Metabolic Control Analysis of Glycerol Synthesis in Saccharomyces cerevisiae</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, The University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
            This model runs in COR and OpenCell and the units are consistent throughout. The model does not currently reproduce the published results, possibly due to missing parameter values in the paper. 
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
ABSTRACT: Glycerol, a major by-product of ethanol fermentation by Saccharomyces cerevisiae, is of significant importance to the wine, beer, and ethanol production industries. To gain a clearer understanding of and to quantify the extent to which parameters of the pathway affect glycerol flux in S. cerevisiae, a kinetic model of the glycerol synthesis pathway has been constructed. Kinetic parameters were collected from published values. Maximal enzyme activities and intracellular effector concentrations were determined experimentally. The model was validated by comparing experimental results on the rate of glycerol production to the rate calculated by the model. Values calculated by the model agreed well with those measured in independent experiments. The model also mimics the changes in the rate of glycerol synthesis at different phases of growth. Metabolic control analysis values calculated by the model indicate that the NAD(+)-dependent glycerol 3-phosphate dehydrogenase-catalyzed reaction has a flux control coefficient (C(J)v1) of approximately 0.85 and exercises the majority of the control of flux through the pathway. Response coefficients of parameter metabolites indicate that flux through the pathway is most responsive to dihydroxyacetone phosphate concentration (R(J)DHAP= 0.48 to 0.69), followed by ATP concentration (R(J)ATP = -0.21 to -0.50). Interestingly, the pathway responds weakly to NADH concentration (R(J)NADH = 0.03 to 0.08). The model indicates that the best strategy to increase flux through the pathway is not to increase enzyme activity, substrate concentration, or coenzyme concentration alone but to increase all of these parameters in conjunction with each other.
</para>
				<para>
The complete original paper reference is cited below:
</para>
				<para>
Metabolic Control Analysis of Glycerol Synthesis in <emphasis>Saccharomyces cerevisiae</emphasis>
          , Garth R. Cronwright, Johann M. Rohwer, and Bernard A. Prior, 2002, 
            <emphasis>Applied and Environmental Microbiology</emphasis>
          , 68, 4448-4456.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=12200299&amp;dopt=Abstract">PubMed ID: 12200299</ulink>
				</para>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>reaction diagram</title>
							</objectinfo>
							<imagedata fileref="cronwright_2002.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the glycerol synthesis pathway in <emphasis>Saccharomyces cerevisiae</emphasis>.</caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Description rdf:about="#F16BP">
			<dc:title>F16BP</dc:title>
			<dcterms:alternative>Fructose 1,6-bisphosphate</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#G3P">
			<dc:title>G3P</dc:title>
			<dcterms:alternative>Glycerol 3-phosphate</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#DHAP">
			<dc:title>DHAP</dc:title>
			<dcterms:alternative>Dihydroxyecetone phosphate</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#ATP">
			<dc:title>ATP</dc:title>
			<dcterms:alternative>Adenosine triphosphate</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#ADP">
			<dc:title>ADP</dc:title>
			<dcterms:alternative>Adenosine diphosphate</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#NADH">
			<dc:title>NADH</dc:title>
			<dcterms:alternative>Nicotinamide adenine dinucleotide</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#NAD">
			<dc:title>NADH</dc:title>
			<dcterms:alternative>Oxidised nicotinamide adenine dinucleotide</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF>
		<rdf:Description rdf:about="#Pi">
			<dc:title>PiH</dc:title>
			<dcterms:alternative>Inorganic phosphate</dcterms:alternative>
		</rdf:Description>
	</rdf:RDF>
	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
		<rdf:Seq rdf:about="rdf:#94a4bc8f-bd02-433f-9510-09deecf5e1a4">
			<rdf:li rdf:resource="rdf:#f423331c-d8b5-4ca6-af76-41bcbda25895"/>
			<rdf:li rdf:resource="rdf:#547daf7c-3525-40ff-bd62-d87814b57df9"/>
			<rdf:li rdf:resource="rdf:#6c513a54-ead5-4305-9ec1-441bd3590440"/>
		</rdf:Seq>
		<rdf:Description rdf:about="">
			<dc:publisher>The University of Auckland, Auckland Bioengineering Institute</dc:publisher>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#0c157c33-b045-4d9f-b4d7-2f94ea7834f3"/>
			<dcterms:created rdf:resource="rdf:#5a23e2c3-bde7-43d8-bf49-e8c5302300df"/>
			<dc:creator rdf:resource="rdf:#9a5a4678-3a57-4b41-88ad-4a8d25ee510e"/>
			<cmeta:modification xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#09979b3d-4d1a-4032-b500-f49a4f621720"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#0c7d1b88-272a-4cc6-acaf-9e8a40e1ca8e">
			<dc:title>Applied and Environmental Microbiology</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#54c0cef6-72a8-449e-a62b-b668ab7f0402">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value>
				<rdf:Bag>
					<rdf:li>yeast</rdf:li>
					<rdf:li>glycerol</rdf:li>
					<rdf:li>metabolism</rdf:li>
				</rdf:Bag>
			</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#16d37908-47f7-47c9-a85f-d93cd0d64161">
			<dc:creator rdf:resource="rdf:#94a4bc8f-bd02-433f-9510-09deecf5e1a4"/>
			<dc:title>Metabolic Control Analysis of Glycerol Synthesis in Saccharomyces cerevisiae</dc:title>
			<bqs:volume>68</bqs:volume>
			<bqs:first_page>4448</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#0c7d1b88-272a-4cc6-acaf-9e8a40e1ca8e"/>
			<dcterms:issued rdf:resource="rdf:#3a4272ea-4ad1-4f06-a0a9-2ee9edc496df"/>
			<bqs:last_page>4456</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#5eb9d20d-f5fd-4fdc-8723-2a920dec41f8">
			<dcterms:W3CDTF>2009-06-08T13:32:16+12:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#2f0d1226-5e49-4681-b79c-9c6e12bf3cff">
			<vCard:FN/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#78f7bb64-cb46-483f-ae80-8695ec5af53c">
			<dc:subject rdf:resource="rdf:#54c0cef6-72a8-449e-a62b-b668ab7f0402"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#bf481266-aea2-46a7-9e33-c2a3791df927">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#6c513a54-ead5-4305-9ec1-441bd3590440">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#f033243a-bd2a-433a-acd1-b95f3a90def9"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a548f063-6322-4803-afd8-478d4de125ba">
			<vCard:Given>James</vCard:Given>
			<vCard:Family>Lawson</vCard:Family>
			<vCard:Other>Richard</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a9678806-bf14-43da-8a04-02b41ff33cda">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#9a5a4678-3a57-4b41-88ad-4a8d25ee510e">
			<vCard:ORG rdf:resource="rdf:#b1caf54f-1fbb-46c6-ade4-973427016283"/>
			<vCard:EMAIL rdf:resource="rdf:#0e2a7253-0776-4e3e-b15b-63316380c081"/>
			<vCard:N rdf:resource="rdf:#a9678806-bf14-43da-8a04-02b41ff33cda"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#547daf7c-3525-40ff-bd62-d87814b57df9">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#15bb6687-c85b-4d96-8f82-c7995b5a2fb8"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#ba5c40f0-fd9d-47ca-a766-2197c1fb0342">
			<vCard:Given>Garth</vCard:Given>
			<vCard:Family>Cronwright</vCard:Family>
			<vCard:Other>R</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#15bb6687-c85b-4d96-8f82-c7995b5a2fb8">
			<vCard:Given>Johann</vCard:Given>
			<vCard:Family>Rohwer</vCard:Family>
			<vCard:Other>M</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#09979b3d-4d1a-4032-b500-f49a4f621720">
			<dcterms:modified rdf:resource="rdf:#5eb9d20d-f5fd-4fdc-8723-2a920dec41f8"/>
			<rdf:value>updated curation status,
removed reference link from publication</rdf:value>
			<cmeta:modifier xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#d21a9d5b-2fb6-420f-ab51-2291d0a6ff34"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d9d6c1fe-aa77-4228-b329-e88f383d53d1">
			<dc:creator rdf:resource="rdf:#bf481266-aea2-46a7-9e33-c2a3791df927"/>
			<rdf:value>This is the CellML description of Cronwright et al.'s 2002 metabolic control analysis of glycerol synthesis in Saccharomyces cerevisiae.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="#cronwright_2002">
			<dc:title>
        Cronwright et al.'s 2002 metabolic control analysis of glycerol synthesis in Saccharomyces cerevisiae.
      </dc:title>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#d9d6c1fe-aa77-4228-b329-e88f383d53d1"/>
			<bqs:reference rdf:resource="rdf:#78f7bb64-cb46-483f-ae80-8695ec5af53c"/>
			<bqs:reference rdf:resource="rdf:#a04a3683-3ec2-441f-bf4d-b61df7da8a7b"/>
			<cmeta:species xmlns:cmeta="http://www.cellml.org/metadata/1.0#">Saccharomyces cerevisiae</cmeta:species>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b1caf54f-1fbb-46c6-ade4-973427016283">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#0e2a7253-0776-4e3e-b15b-63316380c081">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#5a23e2c3-bde7-43d8-bf49-e8c5302300df">
			<dcterms:W3CDTF>2004-01-22T00:00:00+00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f423331c-d8b5-4ca6-af76-41bcbda25895">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#ba5c40f0-fd9d-47ca-a766-2197c1fb0342"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#0c157c33-b045-4d9f-b4d7-2f94ea7834f3">
			<dc:creator rdf:resource="rdf:#2f0d1226-5e49-4681-b79c-9c6e12bf3cff"/>
			<rdf:value/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a04a3683-3ec2-441f-bf4d-b61df7da8a7b">
			<bqs:Pubmed_id>12200299</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#16d37908-47f7-47c9-a85f-d93cd0d64161"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#d21a9d5b-2fb6-420f-ab51-2291d0a6ff34">
			<vCard:N rdf:resource="rdf:#a548f063-6322-4803-afd8-478d4de125ba"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#3a4272ea-4ad1-4f06-a0a9-2ee9edc496df">
			<dcterms:W3CDTF>2002-09</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#f033243a-bd2a-433a-acd1-b95f3a90def9">
			<vCard:Given>Bernard</vCard:Given>
			<vCard:Family>Prior</vCard:Family>
			<vCard:Other>A</vCard:Other>
		</rdf:Description>
	</rdf:RDF>   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millimolar">
      <unit units="mole" prefix="milli"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="minute">
      <unit units="second" multiplier="60"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="flux">
      <unit units="millimolar"/>
      <unit units="minute" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="first_order_rate_constant">
      <unit units="minute" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="minute" public_interface="out"/>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="F16BP">
      <variable name="F16BP" units="millimolar" public_interface="out"/>
      <variable name="time" units="minute" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>F16BP</ci>
            <cn cellml:units="millimolar">0</cn>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="G3P">
      <variable name="G3P" units="millimolar" initial_value="24" public_interface="out"/>
      <variable name="V_Gpd_p" units="flux" public_interface="in"/>
      <variable name="V_Gpp_p" units="flux" public_interface="in"/>
      <variable name="time" units="minute" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>G3P</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <minus/>
                  <ci>V_Gpp_p</ci>
               </apply>
               <ci>V_Gpd_p</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="DHAP">
      <variable name="DHAP" units="millimolar" public_interface="out"/>
      <variable name="V_Gpd_p" units="flux" public_interface="in"/>
      <variable name="time" units="minute" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>DHAP</ci>
            <cn cellml:units="millimolar">0.59</cn>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="ATP">
      <variable name="ATP" units="millimolar" public_interface="out"/>
      <variable name="V_Gpd_p" units="flux" public_interface="in"/>
      <variable name="time" units="minute" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>ATP</ci>
            <cn cellml:units="millimolar">2.37</cn>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="ADP">
      <variable name="ADP" units="millimolar" public_interface="out"/>
      <variable name="V_Gpd_p" units="flux" public_interface="in"/>
      <variable name="time" units="minute" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>ADP</ci>
            <cn cellml:units="millimolar">2.17</cn>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="NADH">
      <variable name="NADH" units="millimolar" public_interface="out"/>
      <variable name="V_Gpd_p" units="flux" public_interface="in"/>
      <variable name="time" units="minute" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>NADH</ci>
            <cn cellml:units="millimolar">1.87</cn>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="NAD">
      <variable name="NAD" units="millimolar" public_interface="out"/>
      <variable name="V_Gpd_p" units="flux" public_interface="in"/>
      <variable name="time" units="minute" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>NAD</ci>
            <cn cellml:units="millimolar">1.45</cn>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="Pi">
      <variable name="Pi_" units="millimolar" public_interface="out"/>
      <variable name="V_Gpp_p" units="flux" public_interface="in"/>
      <variable name="time" units="minute" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Pi_</ci>
            <cn cellml:units="millimolar">2.17</cn>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="V_Gpd_p">
      <variable name="V_Gpd_p" units="flux" public_interface="out"/>
      <variable name="NAD" units="millimolar" public_interface="in"/>
      <variable name="NADH" units="millimolar" public_interface="in"/>
      <variable name="ADP" units="millimolar" public_interface="in"/>
      <variable name="ATP" units="millimolar" public_interface="in"/>
      <variable name="G3P" units="millimolar" public_interface="in"/>
      <variable name="DHAP" units="millimolar" public_interface="in"/>
      <variable name="F16BP" units="millimolar" public_interface="in"/>
      <variable name="K_F16BP" units="millimolar" initial_value="4.8"/>
      <variable name="K_ATP" units="millimolar" initial_value="0.73"/>
      <variable name="K_ADP" units="millimolar" initial_value="2"/>
      <variable name="K_NAD" units="millimolar" initial_value="0.93"/>
      <variable name="K_NADH" units="millimolar" initial_value="0.023"/>
      <variable name="K_G3P" units="millimolar" initial_value="1.2"/>
      <variable name="K_DHAP" units="millimolar" initial_value="0.54"/>
      <variable name="K_eq" units="dimensionless" initial_value="1e4"/>
      <variable name="Vf" units="flux" initial_value="36"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V_Gpd_p</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <ci>Vf</ci>
                     <apply>
                        <times/>
                        <ci>K_NADH</ci>
                        <ci>K_DHAP</ci>
                     </apply>
                  </apply>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>NADH</ci>
                        <ci>DHAP</ci>
                     </apply>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>NAD</ci>
                           <ci>G3P</ci>
                        </apply>
                        <ci>K_eq</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <divide/>
                        <ci>F16BP</ci>
                        <ci>K_F16BP</ci>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>ATP</ci>
                        <ci>K_ATP</ci>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>ADP</ci>
                        <ci>K_ADP</ci>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <divide/>
                        <ci>NADH</ci>
                        <ci>K_NADH</ci>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>NAD</ci>
                        <ci>K_NAD</ci>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <divide/>
                        <ci>DHAP</ci>
                        <ci>K_DHAP</ci>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>G3P</ci>
                        <ci>K_G3P</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="V_Gpp_p">
      <variable name="V_Gpp_p" units="flux" public_interface="out"/>
      <variable name="G3P" units="millimolar" public_interface="in"/>
      <variable name="Pi_" units="millimolar" public_interface="in"/>
      <variable name="K_G3P" units="millimolar" initial_value="3.5"/>
      <variable name="K_Pi" units="millimolar" initial_value="1"/>
      <variable name="V" units="flux" initial_value="18"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>V_Gpp_p</ci>
            <apply>
               <divide/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>V</ci>
                     <ci>G3P</ci>
                  </apply>
                  <ci>K_G3P</ci>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <divide/>
                        <ci>G3P</ci>
                        <ci>K_G3P</ci>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <apply>
                        <divide/>
                        <ci>Pi_</ci>
                        <ci>K_Pi</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="DHAP" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="F16BP" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="G3P" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ATP" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ADP" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NADH" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Pi" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="DHAP" component_2="V_Gpd_p"/>
      <map_variables variable_1="V_Gpd_p" variable_2="V_Gpd_p"/>
      <map_variables variable_1="DHAP" variable_2="DHAP"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="G3P" component_2="V_Gpd_p"/>
      <map_variables variable_1="V_Gpd_p" variable_2="V_Gpd_p"/>
      <map_variables variable_1="G3P" variable_2="G3P"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="F16BP" component_2="V_Gpd_p"/>
      <map_variables variable_1="F16BP" variable_2="F16BP"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ATP" component_2="V_Gpd_p"/>
      <map_variables variable_1="V_Gpd_p" variable_2="V_Gpd_p"/>
      <map_variables variable_1="ATP" variable_2="ATP"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="ADP" component_2="V_Gpd_p"/>
      <map_variables variable_1="V_Gpd_p" variable_2="V_Gpd_p"/>
      <map_variables variable_1="ADP" variable_2="ADP"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NADH" component_2="V_Gpd_p"/>
      <map_variables variable_1="V_Gpd_p" variable_2="V_Gpd_p"/>
      <map_variables variable_1="NADH" variable_2="NADH"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="NAD" component_2="V_Gpd_p"/>
      <map_variables variable_1="V_Gpd_p" variable_2="V_Gpd_p"/>
      <map_variables variable_1="NAD" variable_2="NAD"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="G3P" component_2="V_Gpp_p"/>
      <map_variables variable_1="V_Gpp_p" variable_2="V_Gpp_p"/>
      <map_variables variable_1="G3P" variable_2="G3P"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="Pi" component_2="V_Gpp_p"/>
      <map_variables variable_1="V_Gpp_p" variable_2="V_Gpp_p"/>
      <map_variables variable_1="Pi_" variable_2="Pi_"/>
   </connection>
</model>
