// This CellML file was generated on 15/11/2009 at 11:41:47 at a.m. using:
//
// COR (0.9.31.1333)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Cumin; Given David; d.cumin@auckland.ac.nz; Orgname Auckland Bioengineering Institute
// created: W3CDTF 2009-11-18
// reference: subject_type keyword; lumped parameter; cardiac; cardiovascular circulation; cardiac activation
// reference: Pubmed_id 11842064; Family Heldt; Given T; Family Shim; Given E; Other B; Family Kamm; Given R; Other D; Family Mark; Given R; Other G; title Computational modeling of cardiovascular response to orthostatic stress; W3CDTF 2002; title Journal of Applied Physiology; volume 92; first_page 1239; last_page 1254
def model heldt_circ_pbpk_2002 as
  // Computational modeling of cardiovascular response to orthostatic stress
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and PCEnv. The units have been checked and they balance. This is a lumped parameter model for cardiac activation based on the work of Heldt et al. 2002. This CellMl model represents a structurally complete model of a lumped parameter, physiologically-based circulatory system. It uses the Heldt et al activation function and extends the lumped parameter circulation model such that the circulation through organs is represented. The circulation includes pressures, flows, and transport of a simple substance 'x' which is neither metabolised or excreted. The parameter values for resistors, capacitors, or inductors are not quite right as the flows are not distributed according to other studies and the time-course of substance around the circuit is not correct either - hence it is just structurally correct.
  //
  // Model Structure
  //
  // ABSTRACT: The objective of this study is to develop a model of the cardiovascular system capable of simulating the short-term (less than or equal to 5 min) transient and steady-state hemodynamic responses to head-up tilt and lower body negative pressure. The model consists of a closed-loop lumped-parameter representation of the circulation connected to set-point models of the arterial and cardiopulmonary baroreflexes. Model parameters are largely based on literature values. Model verification was performed by comparing the simulation output under baseline conditions and at different levels of orthostatic stress to sets of population-averaged hemodynamic data reported in the literature. On the basis of experimental evidence, we adjusted some model parameters to simulate experimental data. Orthostatic stress simulations are not statistically different from experimental data (two-sided test of significance with Bonferroni adjustment for multiple comparisons). Transient response characteristics of heart rate to tilt also compare well with reported data. A case study is presented on how the model is intended to be used in the future to investigate the effects of post-spaceflight orthostatic intolerance.
  //
  // model diagram
  //
  // Schematic diagram of full body circulation model.
  //
  // The original paper reference is cited below:
  //
  // Computational modeling of cardiovascular response to orthostatic stress, T. Heldt, E.B. Shim, R.D. Kamm, and R.G. Mark, 2002, Journal of Applied Physiology, 92, 1239-1254. PubMed ID: 11842064 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=11842064&query_hl=1&itool=pubmed_docsum)
  def unit mmHg as
    unit pascal {mult: 133.322};
  enddef;
  def unit elastance as
    unit pascal {mult: 133.322};
    unit litre {pref: milli, expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit s as
    unit second;
  enddef;
  def unit Hz as
    unit s {expo: -1};
  enddef;
  def unit flow as
    unit litre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit inductance as
    unit mmHg;
    unit s {expo: 2};
    unit mL {expo: -1};
  enddef;
  def unit resistance as
    unit mmHg;
    unit s;
    unit mL {expo: -1};
  enddef;
  def unit capacitance as
    unit mL;
    unit mmHg {expo: -1};
  enddef;
  def unit concentration as
    unit mL;
    unit mL {expo: -1};
  enddef;
  def unit ratepm as
    unit second {expo: -1, mult: 60};
  enddef;
  def unit Hz2rpm as
    unit Hz {expo: -1};
    unit ratepm;
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;

  def comp Circ_Environment as
    var time: ms {pub: out};
    var HR: ratepm {init: 77, pub: out};
    var hrf: Hz {pub: out};
    hrf = HR/0.06{Hz2rpm};
  enddef;

  def comp LATiming as
    var realtime: ms {pub: in};
    var HR: ratepm {pub: in};
    var beattime: ms {pub: out};
    var hrf: Hz {pub: in};
    beattime = (realtime-floor(realtime/hrf)*hrf)/1000{dimensionless};
  enddef;

  def comp LAElastanceFunction as
    var time: ms {pub: in};
    var Esys: elastance {init: 0.145};
    var Edia: elastance {init: 0.131};
    var TsK: ms {init: 0.2};
    var Ts: ms;
    var hrf: Hz {pub: in};
    var E_LA: elastance {pub: out};
    Ts = TsK*sqrt(hrf/1000{Hz});
    E_LA = sel
      case (time >= 0{ms}) and (time <= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}-cos(pi*time/Ts))/2{dimensionless};
      case (time < 1.5{dimensionless}*Ts) and (time >= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}+cos(2{dimensionless}*pi*(time-Ts)/Ts))/2{dimensionless};
      otherwise:
        Edia;
    endsel;
  enddef;

  def comp LeftAtrium as
    var time: ms {pub: in};
    var E_LA: elastance {pub: in};
    var P_PV: mmHg {pub: in};
    var F_LV: flow {pub: in};
    var P_LA_ext: mmHg {init: 0};
    var V_LA: mL {init: 144.038898121062, pub: out};
    var V_LA_0: mL {init: 15};
    var P_LA: mmHg {pub: out};
    var F_LA: flow {pub: out};
    var R_LA: resistance {init: 0.01};
    var conc_X_LA: concentration {pub: out};
    var conc_X_PV: concentration {pub: in};
    var sub_X_LA: mL {init: 0};
    ode(sub_X_LA, time) = (conc_X_PV*F_LA-conc_X_LA*F_LV)/1000{dimensionless};
    conc_X_LA = sub_X_LA/V_LA;
    P_LA = E_LA*(V_LA-V_LA_0)+P_LA_ext;
    F_LA = (P_PV-P_LA)/R_LA;
    ode(V_LA, time) = (F_LA-F_LV)/1000{dimensionless};
  enddef;

  def comp LVTiming as
    var realtime: ms {pub: in};
    var HR: ratepm {pub: in};
    var PRint: ms {init: 0.12};
    var beattime: ms {pub: out};
    var hrf: Hz {pub: in};
    beattime = (realtime-floor(realtime/hrf)*hrf)/1000{dimensionless}-PRint;
  enddef;

  def comp LVElastanceFunction as
    var time: second {pub: in};
    var Esys: elastance {init: 5.6};
    var Edia: elastance {init: 0.19};
    var TsK: second {init: 0.35};
    var Ts: second;
    var hrf: Hz {pub: in};
    var E_LV: elastance {pub: out};
    Ts = TsK*sqrt(hrf/1000{Hz});
    E_LV = sel
      case (time >= 0{second}) and (time <= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}-cos(pi*time/Ts))/2{dimensionless};
      case (time < 1.5{dimensionless}*Ts) and (time >= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}+cos(2{dimensionless}*pi*(time-Ts)/Ts))/2{dimensionless};
      otherwise:
        Edia;
    endsel;
  enddef;

  def comp LeftVentricle as
    var time: ms {pub: in};
    var E_LV: elastance {pub: in};
    var F_AO: flow {pub: in};
    var F_CO: flow {pub: in};
    var P_LA: mmHg {pub: in};
    var pLVPext: mmHg {init: 0};
    var V_LV: mL {init: 118.75315693072, pub: out};
    var V_LV_0: mL {init: 30};
    var P_LV: mmHg {pub: out};
    var F_LV: flow {pub: out};
    var R_LV: resistance {init: 0.001};
    var conc_X_LV: concentration {pub: out};
    var conc_X_LA: concentration {pub: in};
    var sub_X_LV: mL {init: 0};
    var fiber_stress: mmHg;
    fiber_stress = P_LV*(1{dimensionless}+3{dimensionless}*V_LV/200{mL});
    ode(sub_X_LV, time) = (conc_X_LA*F_LV-conc_X_LV*(F_AO+F_CO))/1000{dimensionless};
    conc_X_LV = sub_X_LV/V_LV;
    P_LV = E_LV*(V_LV-V_LV_0)+pLVPext;
    F_LV = sel
      case P_LA > P_LV:
        (P_LA-P_LV)/R_LV;
      otherwise:
        0{flow};
    endsel;
    ode(V_LV, time) = (F_LV-F_AO-F_CO)/1000{dimensionless};
  enddef;

  def comp Aorta as
    var time: ms {pub: in};
    var F_CR: flow {pub: in};
    var P_LV: mmHg {pub: in};
    var F_AR: flow {pub: in};
    var C_AO: capacitance {init: 1.2};
    var L_AO: inductance {init: 5e-5};
    var R_AO: resistance {init: 0.01};
    var V_AO_0: mL {init: 200};
    var V_AO: mL {init: 302.714548324312, pub: out};
    var F_AOalways: flow {init: -6898.97886842467};
    var F_AO: flow {pub: out};
    var P_AO: mmHg {pub: out};
    var conc_X_AO: concentration {pub: out};
    var conc_X_LV: concentration {pub: in};
    var sub_X_AO: mL {init: 0};
    ode(sub_X_AO, time) = (conc_X_LV*F_AO-conc_X_AO*(F_CR+F_AR))/1000{dimensionless};
    conc_X_AO = sub_X_AO/V_AO;
    ode(F_AOalways, time) = (1{dimensionless}/L_AO*(P_LV-P_AO)-R_AO/L_AO*F_AOalways)/1000{dimensionless};
    F_AO = sel
      case P_LV > P_AO:
        F_AOalways;
      otherwise:
        0{flow};
    endsel;
    ode(V_AO, time) = (F_AO-F_AR-F_CR)/1000{dimensionless};
    P_AO = 1{dimensionless}/C_AO*(V_AO-V_AO_0);
  enddef;

  def comp CoronaryCirc as
    var time: ms {pub: in};
    var P_LV: mmHg {pub: in};
    var P_RA: mmHg {pub: in};
    var R_CO: resistance {init: 1};
    var R_COV: resistance {init: 0.2};
    var V_CO_0: mL {init: 10};
    var C_CO: capacitance {init: 0.1};
    var F_CO: flow {pub: out};
    var F_COV: flow {pub: out};
    var V_CO: mL {init: 11.4012164759732, pub: out};
    var P_CO: mmHg {pub: out};
    var conc_X_CO: concentration {pub: out};
    var conc_X_LV: concentration {pub: in};
    var sub_X_CO: mL {init: 0};
    ode(sub_X_CO, time) = (conc_X_LV*F_CO-conc_X_CO*F_COV)/1000{dimensionless};
    conc_X_CO = sub_X_CO/V_CO;
    ode(V_CO, time) = (F_CO-F_COV)/1000{dimensionless};
    P_CO = 1{dimensionless}/C_CO*(V_CO-V_CO_0);
    F_CO = sel
      case P_LV > P_CO:
        (P_LV-P_CO)/R_CO;
      otherwise:
        0{flow};
    endsel;
    F_COV = (P_CO-P_RA)/R_COV;
  enddef;

  def comp CarotidCirc as
    var time: ms {pub: in};
    var P_AO: mmHg {pub: in};
    var P_VC: mmHg {pub: in};
    var R_CR: resistance {init: 5};
    var R_CRV: resistance {init: 0.02};
    var V_CR_0: mL {init: 10};
    var C_CR: capacitance {init: 1};
    var F_CR: flow {pub: out};
    var F_CRV: flow {pub: out};
    var V_CR: mL {init: 27.2147903053333, pub: out};
    var P_CR: mmHg {pub: out};
    var conc_X_CR: concentration {pub: out};
    var conc_X_AO: concentration {pub: in};
    var sub_X_CR: mL {init: 0};
    var conc_X_CRtissue: concentration;
    var D_CRtissue: flow {init: 1};
    var V_CRtissue: mL {init: 1};
    var sub_X_CRtissue: mL {init: 0};
    conc_X_CRtissue = sub_X_CRtissue/V_CRtissue;
    ode(sub_X_CRtissue, time) = (conc_X_CR-conc_X_CRtissue)*D_CRtissue/1000{dimensionless};
    ode(sub_X_CR, time) = (conc_X_AO*F_CR-conc_X_CR*F_CRV-(conc_X_CR-conc_X_CRtissue)*D_CRtissue)/1000{dimensionless};
    conc_X_CR = sub_X_CR/V_CR;
    ode(V_CR, time) = (F_CR-F_CRV)/1000{dimensionless};
    P_CR = 1{dimensionless}/C_CR*(V_CR-V_CR_0);
    F_CR = (P_AO-P_CR)/R_CR;
    F_CRV = (P_CR-P_VC)/R_CRV;
  enddef;

  def comp Arteries as
    var time: ms {pub: in};
    var F_AD: flow {pub: in};
    var F_MU: flow {pub: in};
    var F_GI: flow {pub: in};
    var F_LI: flow {pub: in};
    var F_KI: flow {pub: in};
    var F_OT: flow {pub: in};
    var F_SK: flow {pub: in};
    var P_AO: mmHg {pub: in};
    var R_AR: resistance {init: 1.5};
    var C_AR: capacitance {init: 0.5};
    var V_AR_0: mL {init: 370};
    var V_AR: mL {init: 383.557125288364, pub: out};
    var F_AR: flow {pub: out};
    var P_AR: mmHg {pub: out};
    var conc_X_AR: concentration {pub: out};
    var conc_X_AO: concentration {pub: in};
    var sub_X_AR: mL {init: 0};
    ode(sub_X_AR, time) = (conc_X_AO*F_AR-conc_X_AR*(F_SK+F_AD+F_MU+F_GI+F_LI+F_KI+F_OT))/1000{dimensionless};
    conc_X_AR = sub_X_AR/V_AR;
    ode(V_AR, time) = (F_AR-F_AD-F_MU-F_GI-F_LI-F_KI-F_OT-F_SK)/1000{dimensionless};
    P_AR = 1{dimensionless}/C_AR*(V_AR-V_AR_0);
    F_AR = (P_AO-P_AR)/R_AR;
  enddef;

  def comp Adipose as
    var time: s {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_AD: capacitance {init: 1.81};
    var R_AD: resistance {init: 1};
    var R_ADV: resistance {init: 0.33};
    var V_AD_0: mL {init: 75};
    var V_AD: mL {init: 111.639088723426, pub: out};
    var F_AD: flow {pub: out};
    var F_ADV: flow {pub: out};
    var P_AD: mmHg {pub: out};
    var conc_X_AD: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_AD: mL {init: 0};
    ode(sub_X_AD, time) = (conc_X_AR*F_AD-conc_X_AD*F_ADV)/1000{dimensionless};
    conc_X_AD = sub_X_AD/V_AD;
    ode(V_AD, time) = (F_AD-F_ADV)/1000{dimensionless};
    F_ADV = (P_AD-P_VE)/R_ADV;
    P_AD = 1{dimensionless}/C_AD*(V_AD-V_AD_0);
    F_AD = (P_AR-P_AD)/R_AD;
  enddef;

  def comp Muscle as
    var time: s {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_MU: capacitance {init: 1.81};
    var R_MU: resistance {init: 1};
    var R_MUV: resistance {init: 0.33};
    var V_MU_0: mL {init: 75};
    var V_MU: mL {init: 111.639088723426, pub: out};
    var F_MU: flow {pub: out};
    var F_MUV: flow {pub: out};
    var P_MU: mmHg {pub: out};
    var conc_X_MU: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_MU: mL {init: 0};
    ode(sub_X_MU, time) = (conc_X_AR*F_MU-conc_X_MU*F_MUV)/1000{dimensionless};
    conc_X_MU = sub_X_MU/V_MU;
    ode(V_MU, time) = (F_MU-F_MUV)/1000{dimensionless};
    F_MUV = (P_MU-P_VE)/R_MUV;
    P_MU = 1{dimensionless}/C_MU*(V_MU-V_MU_0);
    F_MU = (P_AR-P_MU)/R_MU;
  enddef;

  def comp GutIntestine as
    var time: s {pub: in};
    var P_AR: mmHg {pub: in};
    var P_LI: mmHg {pub: in};
    var C_GI: capacitance {init: 1.81};
    var R_GI: resistance {init: 1};
    var R_GIV: resistance {init: 0.33};
    var V_GI_0: mL {init: 75};
    var V_GI: mL {init: 111.639088723426, pub: out};
    var F_GI: flow {pub: out};
    var F_GIV: flow {pub: out};
    var P_GI: mmHg {pub: out};
    var conc_X_GI: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_GI: mL {init: 0};
    ode(sub_X_GI, time) = (conc_X_AR*F_GI-conc_X_GI*F_GIV)/1000{dimensionless};
    conc_X_GI = sub_X_GI/V_GI;
    ode(V_GI, time) = (F_GI-F_GIV)/1000{dimensionless};
    F_GIV = (P_GI-P_LI)/R_GIV;
    P_GI = 1{dimensionless}/C_GI*(V_GI-V_GI_0);
    F_GI = (P_AR-P_GI)/R_GI;
  enddef;

  def comp Liver as
    var time: s {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_LI: capacitance {init: 1.81};
    var R_LI: resistance {init: 1};
    var R_LIV: resistance {init: 0.33};
    var V_LI_0: mL {init: 75};
    var V_LI: mL {init: 111.639088723426, pub: out};
    var F_LI: flow {pub: out};
    var F_GIV: flow {pub: in};
    var F_LIV: flow {pub: out};
    var P_LI: mmHg {pub: out};
    var conc_X_LI: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var conc_X_GI: concentration {pub: in};
    var sub_X_LI: mL {init: 0};
    var metabolism: flow {init: 0};
    ode(sub_X_LI, time) = (conc_X_GI*F_GIV+conc_X_AR*F_LI-conc_X_LI*F_LIV+conc_X_LI*metabolism)/1000{dimensionless};
    conc_X_LI = sub_X_LI/V_LI;
    ode(V_LI, time) = (F_GIV+F_LI-F_LIV)/1000{dimensionless};
    F_LIV = (P_LI-P_VE)/R_LIV;
    P_LI = 1{dimensionless}/C_LI*(V_LI-V_LI_0);
    F_LI = (P_AR-P_LI)/R_LI;
  enddef;

  def comp Kidney as
    var time: s {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_KI: capacitance {init: 1.81};
    var R_KI: resistance {init: 1};
    var V_KI_0: mL {init: 75};
    var R_KIV: resistance {init: 0.33};
    var V_KI: mL {init: 111.639088723426, pub: out};
    var F_KI: flow {pub: out};
    var F_KIV: flow {pub: out};
    var P_KI: mmHg {pub: out};
    var conc_X_KI: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_KI: mL {init: 0};
    ode(sub_X_KI, time) = (conc_X_AR*F_KI-conc_X_KI*F_KIV)/1000{dimensionless};
    conc_X_KI = sub_X_KI/V_KI;
    ode(V_KI, time) = (F_KI-F_KIV)/1000{dimensionless};
    F_KIV = (P_KI-P_VE)/R_KIV;
    P_KI = 1{dimensionless}/C_KI*(V_KI-V_KI_0);
    F_KI = (P_AR-P_KI)/R_KI;
  enddef;

  def comp Skin as
    var time: s {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_SK: capacitance {init: 1.81};
    var R_SK: resistance {init: 1};
    var R_SKV: resistance {init: 0.33};
    var V_SK_0: mL {init: 75};
    var V_SK: mL {init: 111.639088723426, pub: out};
    var F_SK: flow {pub: out};
    var F_SKV: flow {pub: out};
    var P_SK: mmHg {pub: out};
    var conc_X_SK: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_SK: mL {init: 0};
    ode(sub_X_SK, time) = (conc_X_AR*F_SK-conc_X_SK*F_SKV)/1000{dimensionless};
    conc_X_SK = sub_X_SK/V_SK;
    ode(V_SK, time) = (F_SK-F_SKV)/1000{dimensionless};
    F_SKV = (P_SK-P_VE)/R_SKV;
    P_SK = 1{dimensionless}/C_SK*(V_SK-V_SK_0);
    F_SK = (P_AR-P_SK)/R_SK;
  enddef;

  def comp OtherTissue as
    var time: s {pub: in};
    var P_AR: mmHg {pub: in};
    var P_VE: mmHg {pub: in};
    var C_OT: capacitance {init: 1.81};
    var R_OT: resistance {init: 1};
    var R_OTV: resistance {init: 0.33};
    var V_OT_0: mL {init: 75};
    var V_OT: mL {init: 111.639088723426, pub: out};
    var F_OT: flow {pub: out};
    var F_OTV: flow {pub: out};
    var P_OT: mmHg {pub: out};
    var conc_X_OT: concentration {pub: out};
    var conc_X_AR: concentration {pub: in};
    var sub_X_OT: mL {init: 0};
    ode(sub_X_OT, time) = (conc_X_AR*F_OT-conc_X_OT*F_OTV)/1000{dimensionless};
    conc_X_OT = sub_X_OT/V_OT;
    ode(V_OT, time) = (F_OT-F_OTV)/1000{dimensionless};
    F_OTV = (P_OT-P_VE)/R_OTV;
    P_OT = 1{dimensionless}/C_OT*(V_OT-V_OT_0);
    F_OT = (P_AR-P_OT)/R_OT;
  enddef;

  def comp Veins as
    var time: ms {pub: in};
    var F_ADV: flow {pub: in};
    var F_MUV: flow {pub: in};
    var F_LIV: flow {pub: in};
    var F_KIV: flow {pub: in};
    var F_OTV: flow {pub: in};
    var F_SKV: flow {pub: in};
    var P_VC: mmHg {pub: in};
    var R_VEV: resistance {init: 0.0223};
    var V_VE: mL {init: 833.291684587657, pub: out};
    var C_VE: capacitance {init: 13.24};
    var V_VE_0: mL {init: 596};
    var F_VE: flow {pub: out};
    var F_VEV: flow {pub: out};
    var P_VE: mmHg {pub: out};
    var conc_X_VE: concentration {pub: out};
    var conc_X_AD: concentration {pub: in};
    var conc_X_MU: concentration {pub: in};
    var conc_X_LI: concentration {pub: in};
    var conc_X_KI: concentration {pub: in};
    var conc_X_SK: concentration {pub: in};
    var conc_X_OT: concentration {pub: in};
    var sub_X_VE: mL {init: 5};
    ode(sub_X_VE, time) = (conc_X_SK*F_SKV+conc_X_AD*F_ADV+conc_X_MU*F_MUV+conc_X_LI*F_LIV+conc_X_KI*F_KIV+conc_X_OT*F_OTV-conc_X_VE*F_VEV)/1000{dimensionless};
    conc_X_VE = sub_X_VE/V_VE;
    F_VE = F_SKV+F_ADV+F_MUV+F_LIV+F_KIV+F_OTV;
    ode(V_VE, time) = (F_VE-F_VEV)/1000{dimensionless};
    P_VE = 1{dimensionless}/C_VE*(V_VE-V_VE_0);
    F_VEV = (P_VE-P_VC)/R_VEV;
  enddef;

  def comp VenaCava as
    var time: ms {pub: in};
    var F_VEV: flow {pub: in};
    var P_RA: mmHg {pub: in};
    var F_CRV: flow {pub: in};
    var R_VCV: resistance {init: 0.0267};
    var V_VC: mL {init: 1849.93788284599, pub: out};
    var V_VC_0: mL {init: 600};
    var C_VC: capacitance {init: 73.88};
    var F_VC: flow {pub: out};
    var F_VCV: flow {pub: out};
    var P_VC: mmHg {pub: out};
    var conc_X_VC: concentration {pub: out};
    var conc_X_VE: concentration {pub: in};
    var conc_X_CR: concentration {pub: in};
    var sub_X_VC: mL {init: 0};
    ode(sub_X_VC, time) = (conc_X_VE*F_VEV+conc_X_CR*F_CRV-conc_X_VC*F_VCV)/1000{dimensionless};
    conc_X_VC = sub_X_VC/V_VC;
    F_VC = F_CRV+F_VEV;
    F_VCV = (P_VC-P_RA)/R_VCV;
    ode(V_VC, time) = (F_VC-F_VCV)/1000{dimensionless};
    P_VC = 1{dimensionless}/C_VC*(V_VC-V_VC_0);
  enddef;

  def comp RATiming as
    var realtime: ms {pub: in};
    var HR: ratepm {pub: in};
    var beattime: ms {pub: out};
    var hrf: Hz {pub: in};
    beattime = (realtime-floor(realtime/hrf)*hrf)/1000{dimensionless};
  enddef;

  def comp RAElastanceFunction as
    var time: second {pub: in};
    var Esys: elastance {init: 0.11};
    var Edia: elastance {init: 0.099};
    var TsK: second {init: 0.2};
    var Ts: second;
    var hrf: Hz {pub: in};
    var E_RA: elastance {pub: out};
    Ts = TsK*sqrt(hrf/1000{Hz});
    E_RA = sel
      case (time >= 0{second}) and (time <= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}-cos(pi*time/Ts))/2{dimensionless};
      case (time < 1.5{dimensionless}*Ts) and (time >= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}+cos(2{dimensionless}*pi*(time-Ts)/Ts))/2{dimensionless};
      otherwise:
        Edia;
    endsel;
  enddef;

  def comp RightAtrium as
    var time: ms {pub: in};
    var E_RA: elastance {pub: in};
    var F_RV: flow {pub: in};
    var F_VCV: flow {pub: in};
    var F_COV: flow {pub: in};
    var P_RA_ext: mmHg {init: 0};
    var V_RA: mL {init: 152.150765432928, pub: out};
    var V_RA_0: mL {init: 15};
    var P_RA: mmHg {pub: out};
    var F_RA: flow {pub: out};
    var conc_X_RA: concentration {pub: out};
    var conc_X_VC: concentration {pub: in};
    var conc_X_CO: concentration {pub: in};
    var sub_X_RA: mL {init: 0};
    ode(sub_X_RA, time) = (conc_X_VC*F_VCV+conc_X_CO*F_COV-conc_X_RA*F_RV)/1000{dimensionless};
    conc_X_RA = sub_X_RA/V_RA;
    P_RA = E_RA*(V_RA-V_RA_0)+P_RA_ext;
    F_RA = F_VCV+F_COV;
    ode(V_RA, time) = (F_RA-F_RV)/1000{dimensionless};
  enddef;

  def comp RVTiming as
    var realtime: ms {pub: in};
    var PRinterval: second {init: 0.12};
    var HR: ratepm {pub: in};
    var beattime: ms {pub: out};
    var hrf: Hz {pub: in};
    beattime = (realtime-floor(realtime/hrf)*hrf)/1000{dimensionless}-PRinterval;
  enddef;

  def comp RVElastanceFunction as
    var time: second {pub: in};
    var Esys: elastance {init: 0.67};
    var Edia: elastance {init: 0.104};
    var TsK: second {init: 0.35};
    var Ts: second;
    var hrf: Hz {pub: in};
    var E_RV: elastance {pub: out};
    Ts = TsK*sqrt(hrf/1000{Hz});
    E_RV = sel
      case (time >= 0{second}) and (time <= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}-cos(pi*time/Ts))/2{dimensionless};
      case (time < 1.5{dimensionless}*Ts) and (time >= Ts):
        Edia+(Esys-Edia)*(1{dimensionless}+cos(2{dimensionless}*pi*(time-Ts)/Ts))/2{dimensionless};
      otherwise:
        Edia;
    endsel;
  enddef;

  def comp RightVentricle as
    var time: ms {pub: in};
    var E_RV: elastance {pub: in};
    var P_RA: mmHg {pub: in};
    var F_PA: flow {pub: in};
    var P_RV_ext: mmHg {init: 0};
    var V_RV: mL {init: 154.337916417774, pub: out};
    var V_RV_0: mL {init: 25};
    var P_RV: mmHg {pub: out};
    var F_RV: flow {pub: out};
    var R_RV: resistance {init: 0.002};
    var conc_X_RV: concentration {pub: out};
    var conc_X_RA: concentration {pub: in};
    var sub_X_RV: mL {init: 0};
    ode(sub_X_RV, time) = (conc_X_RA*F_RV-conc_X_RV*F_PA)/1000{dimensionless};
    conc_X_RV = sub_X_RV/V_RV;
    P_RV = E_RV*(V_RV-V_RV_0)+P_RV_ext;
    F_RV = sel
      case P_RA > P_RV:
        (P_RA-P_RV)/R_RV;
      otherwise:
        0{flow};
    endsel;
    ode(V_RV, time) = (F_RV-F_PA)/1000{dimensionless};
  enddef;

  def comp PulmonaryArtery as
    var time: ms {pub: in};
    var F_Pa: flow {pub: in};
    var P_RV: mmHg {pub: in};
    var R_PA: resistance {init: 0.0227};
    var C_PA: capacitance {init: 2.222};
    var V_PA_0: mL {init: 50};
    var F_PA: flow {pub: out};
    var V_PA: mL {init: 112.059036699839, pub: out};
    var P_PA: mmHg {pub: out};
    var conc_X_PA: concentration {pub: out};
    var conc_X_RV: concentration {pub: in};
    var sub_X_PA: mL {init: 0};
    ode(sub_X_PA, time) = (conc_X_RV*F_PA-conc_X_PA*F_Pa)/1000{dimensionless};
    conc_X_PA = sub_X_PA/V_PA;
    F_PA = sel
      case P_RV > P_PA:
        (P_RV-P_PA)/R_PA;
      otherwise:
        0{flow};
    endsel;
    ode(V_PA, time) = (F_PA-F_Pa)/1000{dimensionless};
    P_PA = 1{dimensionless}/C_PA*(V_PA-V_PA_0);
  enddef;

  def comp PulmonaryArteries as
    var time: ms {pub: in};
    var P_PA: mmHg {pub: in};
    var F_PC: flow {pub: in};
    var F_SH: flow {pub: in};
    var V_Pa: mL {init: 66.9910537203609, pub: out};
    var C_Pa: capacitance {init: 1.481};
    var R_Pa: resistance {init: 0.053};
    var V_Pa_0: mL {init: 30};
    var F_Pa: flow {pub: out};
    var P_Pa: mmHg {pub: out};
    var conc_X_Pa: concentration {pub: out};
    var conc_X_PA: concentration {pub: in};
    var sub_X_Pa: mL {init: 0};
    ode(sub_X_Pa, time) = (conc_X_PA*F_Pa-conc_X_Pa*(F_PC+F_SH))/1000{dimensionless};
    conc_X_Pa = sub_X_Pa/V_Pa;
    ode(V_Pa, time) = (F_Pa-F_PC-F_SH)/1000{dimensionless};
    P_Pa = 1{dimensionless}/C_Pa*(V_Pa-V_Pa_0);
    F_Pa = (P_PA-P_Pa)/R_Pa;
  enddef;

  def comp Shunt as
    var time: ms {pub: in};
    var R_SH: resistance {init: 2};
    var F_SH: flow {pub: out};
    var P_Pa: mmHg {pub: in};
    var P_PC: mmHg {pub: in};
    F_SH = (P_Pa-P_PC)/R_SH;
  enddef;

  def comp PulmonaryCapillaries as
    var time: ms {pub: in};
    var P_Pa: mmHg {pub: in};
    var P_PV: mmHg {pub: in};
    var C_PC: capacitance {init: 1.778};
    var R_PC: resistance {init: 0.0379};
    var R_PCV: resistance {init: 0.0379};
    var V_PC_0: mL {init: 53};
    var V_PC: mL {init: 91.7784213531534, pub: out};
    var F_PC: flow {pub: out};
    var F_PCV: flow {pub: out};
    var P_PC: mmHg {pub: out};
    var conc_X_PC: concentration {pub: out};
    var conc_X_Pa: concentration {pub: in};
    var sub_X_PC: mL {init: 0};
    ode(sub_X_PC, time) = (conc_X_Pa*F_PC-conc_X_PC*F_PCV)/1000{dimensionless};
    conc_X_PC = sub_X_PC/V_PC;
    ode(V_PC, time) = (F_PC-F_PCV)/1000{dimensionless};
    P_PC = 1{dimensionless}/C_PC*(V_PC-V_PC_0);
    F_PC = (P_Pa-P_PC)/R_PC;
    F_PCV = (P_PC-P_PV)/R_PCV;
  enddef;

  def comp PulmonaryVein as
    var time: ms {pub: in};
    var F_PCV: flow {pub: in};
    var F_SH: flow {pub: in};
    var F_LA: flow {pub: in};
    var C_PV: capacitance {init: 5};
    var V_PV_0: mL {init: 150};
    var V_PV: mL {init: 239.25897115602, pub: out};
    var F_PV: flow {pub: out};
    var P_PV: mmHg {pub: out};
    var conc_X_PV: concentration {pub: out};
    var conc_X_PC: concentration {pub: in};
    var conc_X_Pa: concentration {pub: in};
    var sub_X_PV: mL {init: 0};
    ode(sub_X_PV, time) = (conc_X_PC*F_PCV+conc_X_Pa*F_SH-conc_X_PV*F_LA)/1000{dimensionless};
    conc_X_PV = sub_X_PV/V_PV;
    F_PV = F_PCV+F_SH;
    ode(V_PV, time) = (F_PV-F_LA)/1000{dimensionless};
    P_PV = 1{dimensionless}/C_PV*(V_PV-V_PV_0);
  enddef;
  def map between GutIntestine and Liver for
    vars F_GIV and F_GIV;
    vars conc_X_GI and conc_X_GI;
    vars P_LI and P_LI;
  enddef;
  def map between Skin and Circ_Environment for
    vars time and time;
  enddef;
  def map between Skin and Arteries for
    vars P_AR and P_AR;
    vars F_SK and F_SK;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Skin and Veins for
    vars P_VE and P_VE;
    vars F_SKV and F_SKV;
    vars conc_X_SK and conc_X_SK;
  enddef;
  def map between LeftAtrium and PulmonaryVein for
    vars P_PV and P_PV;
    vars F_LA and F_LA;
    vars conc_X_PV and conc_X_PV;
  enddef;
  def map between LeftAtrium and LeftVentricle for
    vars F_LV and F_LV;
    vars P_LA and P_LA;
    vars conc_X_LA and conc_X_LA;
  enddef;
  def map between LVTiming and Circ_Environment for
    vars realtime and time;
    vars HR and HR;
    vars hrf and hrf;
  enddef;
  def map between LVElastanceFunction and Circ_Environment for
    vars hrf and hrf;
  enddef;
  def map between LVElastanceFunction and LVTiming for
    vars time and beattime;
  enddef;
  def map between LeftVentricle and LVElastanceFunction for
    vars E_LV and E_LV;
  enddef;
  def map between LeftVentricle and Circ_Environment for
    vars time and time;
  enddef;
  def map between LeftVentricle and Aorta for
    vars F_AO and F_AO;
    vars P_LV and P_LV;
    vars conc_X_LV and conc_X_LV;
  enddef;
  def map between LeftVentricle and CoronaryCirc for
    vars F_CO and F_CO;
    vars P_LV and P_LV;
    vars conc_X_LV and conc_X_LV;
  enddef;
  def map between Aorta and Circ_Environment for
    vars time and time;
  enddef;
  def map between Aorta and Arteries for
    vars F_AR and F_AR;
    vars P_AO and P_AO;
    vars conc_X_AO and conc_X_AO;
  enddef;
  def map between Aorta and CarotidCirc for
    vars F_CR and F_CR;
    vars P_AO and P_AO;
    vars conc_X_AO and conc_X_AO;
  enddef;
  def map between CoronaryCirc and Circ_Environment for
    vars time and time;
  enddef;
  def map between CoronaryCirc and RightAtrium for
    vars P_RA and P_RA;
    vars F_COV and F_COV;
    vars conc_X_CO and conc_X_CO;
  enddef;
  def map between CarotidCirc and Circ_Environment for
    vars time and time;
  enddef;
  def map between CarotidCirc and VenaCava for
    vars P_VC and P_VC;
    vars F_CRV and F_CRV;
    vars conc_X_CR and conc_X_CR;
  enddef;
  def map between Arteries and Circ_Environment for
    vars time and time;
  enddef;
  def map between Arteries and Adipose for
    vars P_AR and P_AR;
    vars F_AD and F_AD;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and Muscle for
    vars P_AR and P_AR;
    vars F_MU and F_MU;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and GutIntestine for
    vars P_AR and P_AR;
    vars F_GI and F_GI;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and Liver for
    vars P_AR and P_AR;
    vars F_LI and F_LI;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and Kidney for
    vars P_AR and P_AR;
    vars F_KI and F_KI;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Arteries and OtherTissue for
    vars P_AR and P_AR;
    vars F_OT and F_OT;
    vars conc_X_AR and conc_X_AR;
  enddef;
  def map between Adipose and Circ_Environment for
    vars time and time;
  enddef;
  def map between Adipose and Veins for
    vars P_VE and P_VE;
    vars F_ADV and F_ADV;
    vars conc_X_AD and conc_X_AD;
  enddef;
  def map between Muscle and Circ_Environment for
    vars time and time;
  enddef;
  def map between Muscle and Veins for
    vars P_VE and P_VE;
    vars F_MUV and F_MUV;
    vars conc_X_MU and conc_X_MU;
  enddef;
  def map between GutIntestine and Circ_Environment for
    vars time and time;
  enddef;
  def map between Liver and Circ_Environment for
    vars time and time;
  enddef;
  def map between Liver and Veins for
    vars P_VE and P_VE;
    vars F_LIV and F_LIV;
    vars conc_X_LI and conc_X_LI;
  enddef;
  def map between Kidney and Circ_Environment for
    vars time and time;
  enddef;
  def map between Kidney and Veins for
    vars P_VE and P_VE;
    vars F_KIV and F_KIV;
    vars conc_X_KI and conc_X_KI;
  enddef;
  def map between OtherTissue and Circ_Environment for
    vars time and time;
  enddef;
  def map between OtherTissue and Veins for
    vars P_VE and P_VE;
    vars F_OTV and F_OTV;
    vars conc_X_OT and conc_X_OT;
  enddef;
  def map between Veins and Circ_Environment for
    vars time and time;
  enddef;
  def map between Veins and VenaCava for
    vars P_VC and P_VC;
    vars F_VEV and F_VEV;
    vars conc_X_VE and conc_X_VE;
  enddef;
  def map between VenaCava and Circ_Environment for
    vars time and time;
  enddef;
  def map between VenaCava and RightAtrium for
    vars P_RA and P_RA;
    vars F_VCV and F_VCV;
    vars conc_X_VC and conc_X_VC;
  enddef;
  def map between RATiming and Circ_Environment for
    vars realtime and time;
    vars HR and HR;
    vars hrf and hrf;
  enddef;
  def map between RAElastanceFunction and Circ_Environment for
    vars hrf and hrf;
  enddef;
  def map between RATiming and RAElastanceFunction for
    vars beattime and time;
  enddef;
  def map between RightAtrium and Circ_Environment for
    vars time and time;
  enddef;
  def map between RAElastanceFunction and RightAtrium for
    vars E_RA and E_RA;
  enddef;
  def map between RightAtrium and RightVentricle for
    vars F_RV and F_RV;
    vars P_RA and P_RA;
    vars conc_X_RA and conc_X_RA;
  enddef;
  def map between RVTiming and Circ_Environment for
    vars realtime and time;
    vars HR and HR;
    vars hrf and hrf;
  enddef;
  def map between RVTiming and RVElastanceFunction for
    vars beattime and time;
  enddef;
  def map between RVElastanceFunction and Circ_Environment for
    vars hrf and hrf;
  enddef;
  def map between RightVentricle and RVElastanceFunction for
    vars E_RV and E_RV;
  enddef;
  def map between RightVentricle and Circ_Environment for
    vars time and time;
  enddef;
  def map between RightVentricle and PulmonaryArtery for
    vars F_PA and F_PA;
    vars P_RV and P_RV;
    vars conc_X_RV and conc_X_RV;
  enddef;
  def map between PulmonaryArtery and Circ_Environment for
    vars time and time;
  enddef;
  def map between PulmonaryArteries and Circ_Environment for
    vars time and time;
  enddef;
  def map between PulmonaryArteries and PulmonaryCapillaries for
    vars F_PC and F_PC;
    vars P_Pa and P_Pa;
    vars conc_X_Pa and conc_X_Pa;
  enddef;
  def map between PulmonaryArteries and Shunt for
    vars F_SH and F_SH;
    vars P_Pa and P_Pa;
  enddef;
  def map between PulmonaryArteries and PulmonaryArtery for
    vars P_PA and P_PA;
    vars F_Pa and F_Pa;
    vars conc_X_PA and conc_X_PA;
  enddef;
  def map between Shunt and Circ_Environment for
    vars time and time;
  enddef;
  def map between Shunt and PulmonaryCapillaries for
    vars P_PC and P_PC;
  enddef;
  def map between Shunt and PulmonaryVein for
    vars F_SH and F_SH;
  enddef;
  def map between PulmonaryCapillaries and Circ_Environment for
    vars time and time;
  enddef;
  def map between PulmonaryCapillaries and PulmonaryVein for
    vars P_PV and P_PV;
    vars F_PCV and F_PCV;
    vars conc_X_PC and conc_X_PC;
  enddef;
  def map between PulmonaryVein and Circ_Environment for
    vars time and time;
  enddef;
  def map between PulmonaryVein and PulmonaryArteries for
    vars conc_X_Pa and conc_X_Pa;
  enddef;
  def map between LATiming and Circ_Environment for
    vars realtime and time;
    vars HR and HR;
    vars hrf and hrf;
  enddef;
  def map between LAElastanceFunction and Circ_Environment for
    vars hrf and hrf;
  enddef;
  def map between LAElastanceFunction and LATiming for
    vars time and beattime;
  enddef;
  def map between LAElastanceFunction and LeftAtrium for
    vars E_LA and E_LA;
  enddef;
  def map between LeftAtrium and Circ_Environment for
    vars time and time;
  enddef;
enddef;
