// This CellML file was generated on 1/11/2009 at 11:25:38 at a.m. using:
//
// COR (0.9.31.1329)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Cumin; Given David; d.cumin@auckland.ac.nz; Orgname Auckland Bioengineering Institute
// created: W3CDTF 2009-10-26
// title: The Heldt et al. 2002 computational model of the heart
// comment: This is the CellML description of Heldt et al.'s computational model of the heart. Specifically the left ventricle.; FN Catherine Lloyd
// bio_entity: left ventricle
// reference: subject_type keyword; lumped parameter; cardiac; cardiovascular circulation; cardiac activation
// reference: Pubmed_id 11842064; Family Heldt; Given T; Family Shim; Given E; Other B; Family Kamm; Given R; Other D; Family Mark; Given R; Other G; title Computational modeling of cardiovascular response to orthostatic stress; W3CDTF 2002; title Journal of Applied Physiology; volume 92; first_page 1239; last_page 1254
def model heldt_lpc_2002 as
  // Computational modeling of cardiovascular response to orthostatic stress
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and PCEnv to reproduce the published results. The units have been checked and they balance. This is a lumped parameter model for cardiac activation based on the work of Heldt et al. 2002. This CellMl model represents the whole heart (all four chambers) connected to a lumped parameter model of the circulatory system including systemic circulation, a coronary circulation, and a pulmonary circulation. The model and results are exactly the same as the JSim model (http://physiome.org/model/doku.php?id=Integrative_Physiology:Lumped_parameter_circulation:model_detail#Detailed_Description) of the same name.
  //
  // Model Structure
  //
  // ABSTRACT: The objective of this study is to develop a model of the cardiovascular system capable of simulating the short-term (less than or equal to 5 min) transient and steady-state hemodynamic responses to head-up tilt and lower body negative pressure. The model consists of a closed-loop lumped-parameter representation of the circulation connected to set-point models of the arterial and cardiopulmonary baroreflexes. Model parameters are largely based on literature values. Model verification was performed by comparing the simulation output under baseline conditions and at different levels of orthostatic stress to sets of population-averaged hemodynamic data reported in the literature. On the basis of experimental evidence, we adjusted some model parameters to simulate experimental data. Orthostatic stress simulations are not statistically different from experimental data (two-sided test of significance with Bonferroni adjustment for multiple comparisons). Transient response characteristics of heart rate to tilt also compare well with reported data. A case study is presented on how the model is intended to be used in the future to investigate the effects of post-spaceflight orthostatic intolerance.
  //
  // model diagram
  //
  // Schematic diagram of the Heldt et al. 2002 circulation model.
  //
  // The original paper reference is cited below:
  //
  // Computational modeling of cardiovascular response to orthostatic stress, T. Heldt, E.B. Shim, R.D. Kamm, and R.G. Mark, 2002, Journal of Applied Physiology, 92, 1239-1254. PubMed ID: 11842064 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=11842064&query_hl=1&itool=pubmed_docsum)
  def unit mmHg as
    unit pascal {mult: 133.322};
  enddef;
  def unit perml as
    unit mL {expo: -1};
  enddef;
  def unit elastance as
    unit pascal {mult: 133.322};
    unit litre {pref: milli, expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit s as
    unit second;
  enddef;
  def unit Hz as
    unit s {expo: -1};
  enddef;
  def unit flow as
    unit litre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit flowLm as
    unit litre;
    unit second {mult: 60, expo: -1};
  enddef;
  def unit inductance as
    unit mmHg;
    unit s {expo: 2};
    unit mL {expo: -1};
  enddef;
  def unit resistance as
    unit mmHg;
    unit s;
    unit mL {expo: -1};
  enddef;
  def unit capacitance as
    unit mL;
    unit mmHg {expo: -1};
  enddef;
  def unit concentration as
    unit mL;
    unit mL {expo: -1};
  enddef;
  def unit ratepm as
    unit second {expo: -1, mult: 60};
  enddef;
  def unit Hz2rpm as
    unit Hz;
    unit ratepm;
  enddef;
  def unit mmHgmlm2 as
    unit mmHg;
    unit mL {expo: -2};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;

  def comp lpc as
    var t: s;
    var Vlvrd: mL {init: 72};
    var Vlvrs: mL {init: 23};
    var Vrvrd: mL {init: 103};
    var Vrvrs: mL {init: 53};
    var Vlard: mL {init: 10};
    var Vlars: mL {init: 8};
    var Vrard: mL {init: 10};
    var Vrars: mL {init: 8};
    var Rra: resistance {init: 0.001};
    var Rla: resistance {init: 0.001};
    var PRint: s {init: 0.12};
    var Emaxlv: elastance {init: 5.6};
    var Eminlv: elastance {init: 0.186874659};
    var Emaxrv: elastance {init: 0.67};
    var Eminrv: elastance {init: 0.1041640922};
    var Emaxra: elastance {init: 0.1091675077};
    var Eminra: elastance {init: 0.0992431888};
    var Emaxla: elastance {init: 0.1446191772};
    var Eminla: elastance {init: 0.1314719793};
    var Pbs: mmHg {init: 0};
    var Vmyo: mL {init: 238};
    var TsvK: s {init: 0.35};
    var TsaK: s {init: 0.2};
    var HR: ratepm {init: 77};
    var Elv: elastance;
    var Erv: elastance;
    var Era: elastance;
    var Ela: elastance;
    var Vlvr: mL;
    var Vrvr: mL;
    var Vlar: mL;
    var Vrar: mL;
    var Fra: flow;
    var Frv: flow;
    var Fla: flow;
    var Flv: flow;
    var Pra: mmHg;
    var Prac: mmHg;
    var Prv: mmHg;
    var Prvc: mmHg;
    var Pla: mmHg;
    var Plac: mmHg;
    var Plv: mmHg;
    var Plvc: mmHg;
    var Vra: mL {init: 78.2537};
    var Vrv: mL {init: 167.4806};
    var Vla: mL {init: 85.9126};
    var Vlv: mL {init: 125.360568};
    var COutput: flow {init: 108.56912706};
    var SV: mL;
    var P_QRSwave: mV;
    var Tsv: s;
    var Tsa: s;
    var trela: s;
    var trelv: s;
    var Rav: resistance {init: 1e-4};
    var Raop: resistance {init: 1e-4};
    var Rcrb: resistance {init: 6.8284472205};
    var Raod: resistance {init: 0.025};
    var Rtaop: resistance {init: 0.2};
    var Rtaod: resistance {init: 0.3};
    var Rsap: resistance {init: 0.025};
    var Rsc: resistance {init: 0.1545054945};
    var Rsv: resistance {init: 0.1381298227};
    var Rsao: resistance {init: 0.5508058134};
    var Caop: capacitance {init: 0.3445734208};
    var Caod: capacitance {init: 1.4544677036};
    var Csap: capacitance {init: 1.4843409851};
    var Csc: capacitance {init: 7.9822364317};
    var Laop: inductance {init: 3.5e-4};
    var Laod: inductance {init: 3.5e-4};
    var Kc: mmHg {init: 497.7852450367};
    var Do: mL {init: 50};
    var Vsa_o: mL {init: 485.7624931891};
    var Vsa_max: mL {init: 577.7106000108};
    var Kp1: mmHg {init: 0.03};
    var Kp2: mmHgmlm2 {init: 0.05};
    var Kr: resistance {init: 0.01};
    var tau_p: perml {init: 0.1};
    var Kv: mmHg {init: 21.83};
    var Vmax_sv: mL {init: 3379.545};
    var D2: mmHg {init: -5};
    var K1: dimensionless {init: 0.0968305478};
    var K2: mmHg {init: 0.4};
    var KR: resistance {init: 0.001};
    var Ro: resistance {init: 0.025};
    var Vo: mL {init: 129.6486};
    var Vmax_vc: mL {init: 350.5314};
    var Vmin_vc: mL {init: 50.010747};
    var COtau: s {init: 15};
    var Pplc: mmHg {init: -5.6};
    var Px2: mmHg {init: 2};
    var Vx8: mL {init: 8};
    var Vx75: mL {init: 75};
    var Vx1: mL {init: 1};
    var Px1: mmHg {init: 1};
    var F_vaso: dimensionless {init: 0.5};
    var Rvc: resistance;
    var Rsa: resistance;
    var Paop: mmHg;
    var Paopc: mmHg {init: 87.93968};
    var Paod: mmHg;
    var Paodc: mmHg;
    var Psa_a: mmHg;
    var Psa_p: mmHg;
    var Psa: mmHg;
    var Psap: mmHg;
    var Psc: mmHg;
    var Psv: mmHg;
    var Pvc: mmHg;
    var Pvcc: mmHg;
    var MAP: mmHg {init: 90.6179};
    var Faop: flowLm {init: 0.698577};
    var Faod: flow {init: 23.5957};
    var Fsap: flow;
    var Fsa: flow;
    var Fsc: flow;
    var Fsv: flow;
    var Fvc: flow;
    var Fcrb: flow;
    var Vaop: mL {init: 31.1705};
    var Vaod: mL {init: 138.4476};
    var Vsa: mL {init: 519.7915};
    var Vsap: mL {init: 129.6439};
    var Vsc: mL {init: 256.8555};
    var Vsv: mL {init: 2961.6507};
    var Vvc: mL {init: 232.46638962};
    var Vtot: mL;
    var SysArtVol: mL;
    var SysVenVol: mL;
    var PulArtVol: mL;
    var PulVenVol: mL;
    var VBcirc: mL;
    var Ppl: mmHg;
    var Rpuv: resistance {init: 1e-4};
    var Rtpap: resistance {init: 0.05};
    var Rtpad: resistance {init: 0.05};
    var Rpap: resistance {init: 1e-4};
    var Rpad: resistance {init: 0.03};
    var Rps: resistance {init: 4.2958026137};
    var Rpa: resistance {init: 0.0565149137};
    var Rpc: resistance {init: 0.0309026688};
    var Rpv: resistance {init: 1e-4};
    var Ctpap: capacitance {init: 1.5365929068};
    var Ctpad: capacitance {init: 2.6893667388};
    var Cpa: capacitance {init: 3.1321449506};
    var Cpc: capacitance {init: 7.7147};
    var Cpv: capacitance {init: 27.87028922};
    var Lpa: inductance {init: 1.801907e-4};
    var Lpad: inductance {init: 1.932239e-4};
    var Ppapc: mmHg;
    var Ppapc1: mmHg;
    var Ppapc2: mmHg;
    var Ppap: mmHg;
    var Ppad: mmHg;
    var Ppadc: mmHg;
    var Ppa: mmHg;
    var Ppac: mmHg;
    var Ppc: mmHg;
    var Ppcc: mmHg;
    var Ppv: mmHg;
    var Ppvc: mmHg;
    var Vpap: mL {init: 33.1398};
    var Vpad: mL {init: 60.11203897};
    var Vpa: mL {init: 58.926};
    var Vpc: mL {init: 107.57022};
    var Vpv: mL {init: 293.0398};
    var Fpap: flowLm {init: 1.2282};
    var Fpad: flow {init: 57.1876};
    var Fps: flow;
    var Fpa: flow;
    var Fpc: flow;
    var Fpv: flow;
    var K_pcd: mmHg {init: 1};
    var phi_pcd: mL {init: 40};
    var Vpcd_o: mL {init: 785};
    var perifl: mL {init: 15};
    var Ppcd: mmHg;
    var Ppcdc: mmHg;
    var Vpcd: mL;
    var Rcorao: resistance {init: 2.642367};
    var Rcorea: resistance {init: 2.642367};
    var Rcorla: resistance {init: 5.073345};
    var Rcorsa: resistance {init: 5.073345};
    var Rcorcap: resistance {init: 4.227788};
    var Rcorsv: resistance {init: 0.4932479};
    var Rcorlv: resistance {init: 0.4932479};
    var Rcorev: resistance {init: 0.4932479};
    var Ccorao: capacitance {init: 0.13};
    var Ccorea: capacitance {init: 0.05507};
    var Ccorla: capacitance {init: 0.09129};
    var Ccorsa: capacitance {init: 0.15602};
    var Ccorcap: capacitance {init: 1.8};
    var Ccorsv: capacitance {init: 0.58155};
    var Ccorlv: capacitance {init: 0.68372};
    var Ccorev: capacitance {init: 0.832299};
    var Pcorisfc: mmHg;
    var Pcoraoc: mmHg;
    var Pcoreac: mmHg;
    var Pcorlac: mmHg;
    var Pcorsac: mmHg;
    var Pcorcapc: mmHg;
    var Pcorsvc: mmHg;
    var Pcorlvc: mmHg;
    var Pcorevc: mmHg;
    var Pcorao: mmHg;
    var Pcorea: mmHg;
    var Pcorla: mmHg;
    var Pcorsa: mmHg;
    var Pcorcap: mmHg;
    var Pcorsv: mmHg;
    var Pcorlv: mmHg;
    var Pcorev: mmHg;
    var Vcorao: mL {init: 2.76087};
    var Vcorea: mL {init: 4.41135};
    var Vcorla: mL {init: 4.992799};
    var Vcorsa: mL {init: 4.22047};
    var Vcorcap: mL {init: 8.55228};
    var Vcorsv: mL {init: 7.8362};
    var Vcorlv: mL {init: 8.213955};
    var Vcorev: mL {init: 8.76758};
    var Vcorcirc: mL;
    var Fcorao: flow;
    var Fcorea: flow;
    var Fcorla: flow;
    var Fcorsa: flow;
    var Fcorcap: flow;
    var Fcorsv: flow;
    var Fcorlv: flow;
    var Fcorev: flow;
    var beattime: s;
    var yla: dimensionless;
    var yra: dimensionless;
    var ylv: dimensionless;
    var yrv: dimensionless;
    var hrf: Hz {pub: out};
    hrf = 60{Hz2rpm}/HR;
    beattime = t-floor(t/hrf)*hrf;
    Tsv = TsvK*sqrt(1{ratepm}*1{dimensionless}/HR)*7.745966692414832{dimensionless};
    Tsa = TsaK*sqrt(1{Hz}/HR)*7.745966692414832{dimensionless};
    trelv = beattime-PRint;
    trela = beattime;
    yla = sel
      case (trela >= 0{s}) and (trela <= Tsa):
        (1{dimensionless}-cos(pi*trela/Tsa))/2{dimensionless};
      case (trela < 1.5{dimensionless}*Tsa) and (trela >= Tsa):
        (1{dimensionless}+cos(2{dimensionless}*pi*(trela-Tsa)/Tsa))/2{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    yra = yla;
    ylv = sel
      case (trelv >= 0{s}) and (trelv <= Tsv):
        (1{dimensionless}-cos(pi*trelv/Tsv))/2{dimensionless};
      case (trelv < 1.5{dimensionless}*Tsv) and (trelv >= Tsv):
        (1{dimensionless}+cos(2{dimensionless}*pi*(trelv-Tsv)/Tsv))/2{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    yrv = ylv;
    Era = (Emaxra-Eminra)*yra+Eminra;
    Erv = (Emaxrv-Eminrv)*yrv+Eminrv;
    Ela = (Emaxla-Eminla)*yla+Eminla;
    Elv = (Emaxlv-Eminlv)*ylv+Eminlv;
    ode(Faod, t) = (Paodc-Faod*Raod-Psap)/Laod;
    ode(Faop, t) = (Paopc-Faop*Raop*16.66666666666667{dimensionless}-Paodc)/Laop*0.059999999999999984{dimensionless};
    Fcorao = (Pcoraoc-Pcoreac)/Rcorao;
    Fcorcap = (Pcorcapc-Pcorsvc)/Rcorcap;
    Fcorea = (Pcoreac-Pcorlac)/Rcorea;
    Fcorev = (Pcorevc-Prac)/Rcorev;
    Fcorla = (Pcorlac-Pcorsac)/Rcorla;
    Fcorlv = (Pcorlvc-Pcorevc)/Rcorlv;
    Fcorsa = (Pcorsac-Pcorcapc)/Rcorsa;
    Fcorsv = (Pcorsvc-Pcorlvc)/Rcorsv;
    Fcrb = (Paodc-Pvcc)/Rcrb;
    Fla = sel
      case Plac > Plvc:
        (Plac-Plvc)/Rla;
      otherwise:
        0{flow};
    endsel;
    Flv = sel
      case Plvc > Paopc:
        (Plvc-Paopc)/Rav;
      otherwise:
        0{flow};
    endsel;
    Fpa = (Ppac-Ppcc)/Rpa;
    ode(Fpad, t) = (Ppadc-Ppac-Fpad*Rpad)/Lpad;
    ode(Fpap, t) = (Ppapc-Ppadc-Fpap*Rpap*16.66666666666667{dimensionless})/Lpa*0.059999999999999984{dimensionless};
    Fpc = (Ppcc-Ppvc)/Rpc;
    Fps = (Ppac-Ppvc)/Rps;
    Fpv = (Ppvc-Plac)/Rpv;
    Fra = sel
      case Prac > Prvc:
        (Prac-Prvc)/Rra;
      otherwise:
        0{flow};
    endsel;
    Frv = sel
      case Prvc > Ppapc:
        (Prvc-Ppapc)/Rpuv;
      otherwise:
        0{flow};
    endsel;
    Fsa = (Psa-Psc)/Rsa;
    Fsap = (Psap-Psa)/Rsap;
    Fsc = (Psc-Psv)/Rsc;
    Fsv = (Psv-Pvcc)/Rsv;
    Fvc = (Pvcc-Prac)/Rvc;
    ode(MAP, t) = (Psa-MAP)/COtau;
    P_QRSwave = sel
      case (t > beattime) and (t < beattime+0.02{s}):
        5{mV};
      case (t > beattime+PRint) and (t < beattime+PRint+0.02{s}):
        10{mV};
      otherwise:
        0{mV};
    endsel;
    Paod = Paodc-Pbs;
    Paodc = (Rtaod*Rcrb*Faop-Rtaod*Rcrb*Faod*0.059999999999999984{dimensionless}+Vaod*Rcrb/Caod*0.060000000000000005{dimensionless}-Rcrb*Px2/(exp(Vaod/Vx8)-1{dimensionless})*0.059999999999999984{dimensionless}+Pvcc*Rtaod*0.059999999999999984{dimensionless})/(Rcrb+Rtaod)*16.66666666666667{dimensionless};
    Paop = Paopc-Pplc;
    ode(Paopc, t) = (Flv-ode(Vaop, t)-Faop*16.66666666666667{dimensionless}-Fcorao)*(1{dimensionless}/Ccorao+Px2/1{mL}*exp(Vcorao/Vx1)/sqr(exp(Vcorao/Vx1)-1{dimensionless}));
    Pcorao = Paop;
    Pcoraoc = Paopc;
    Pcorcap = Vcorcap/Ccorcap-Px1*1{dimensionless}/(exp(Vcorcap/Vx1)-1{dimensionless});
    Pcorcapc = Pcorcap+Pcorisfc;
    Pcorea = Vcorea/Ccorea-Px1*1{dimensionless}/(exp(Vcorea/Vx1)-1{dimensionless});
    Pcoreac = Pcorea+Ppcdc;
    Pcorev = Vcorev/Ccorev-Px2*1{dimensionless}/(exp(Vcorev/Vx8)-1{dimensionless});
    Pcorevc = Pcorev+Ppcdc;
    Pcorisfc = abs((Plvc-Ppcdc)/2{dimensionless});
    Pcorla = Vcorla/Ccorla-Px1*1{dimensionless}/(exp(Vcorla/Vx1)-1{dimensionless});
    Pcorlac = Pcorla+Pcorisfc;
    Pcorlv = Vcorlv/Ccorlv-Px1*1{dimensionless}/(exp(Vcorlv/Vx1)-1{dimensionless});
    Pcorlvc = Pcorlv+Ppcdc;
    Pcorsa = Vcorsa/Ccorsa-Px1*1{dimensionless}/(exp(Vcorsa/Vx1)-1{dimensionless});
    Pcorsac = Pcorsa+Pcorisfc;
    Pcorsv = Vcorsv/Ccorsv-Px1*1{dimensionless}/(exp(Vcorsv/Vx1)-1{dimensionless});
    Pcorsvc = Pcorsv+Ppcdc;
    Pla = (Vla-Vlar)*Ela-Px2*1{dimensionless}/(exp(Vla/Vx8)-1{dimensionless});
    Plac = Pla+Ppcdc;
    Plv = (Vlv-Vlvr)*Elv-Px2*1{dimensionless}/(exp(Vlv/Vx8)-1{dimensionless});
    Plvc = Plv+Ppcdc;
    Ppa = Vpa/Cpa-Px2*1{dimensionless}/(exp(Vpa/Vx8)-1{dimensionless});
    Ppac = Ppa+Pplc;
    Ppad = Ppadc-Pplc;
    Ppadc = ode(Vpad, t)*Rtpad+Pplc+Vpad/Ctpad-Px2*1{dimensionless}/(exp(Vpad/Vx8)-1{dimensionless});
    Ppap = Ppapc-Pplc;
    Ppapc1 = (Rpuv*Vpap/Ctpap-Rpuv*Px2*1{dimensionless}/(exp(Vpap/Vx8)-1{dimensionless})+Prvc*Rtpap-Rpuv*Rtpap*Fpap*16.666666666666668{dimensionless}+Pplc*Rpuv)/(Rtpap+Rpuv);
    Ppapc2 = Vpap/Ctpap+Pplc-Rtpap*Fpap*16.666666666666668{dimensionless}-Px2*1{dimensionless}/(exp(Vpap/Vx8)-1{dimensionless});
    Ppapc = sel
      case Prvc > Ppapc1:
        Ppapc1;
      otherwise:
        Ppapc2;
    endsel;
    Ppc = Vpc/Cpc-Px2*1{dimensionless}/(exp(Vpc/Vx8)-1{dimensionless});
    Ppcc = Ppc+Pplc;
    Ppcd = K_pcd*exp((Vpcd-Vpcd_o)/phi_pcd)-Px2*1{dimensionless}/(exp(Vpcd/Vx75)-1{dimensionless});
    Ppcdc = Ppcd+Pplc;
    Ppl = Pplc-Pbs;
    Ppv = Vpv/Cpv-Px2*1{dimensionless}/(exp(Vpv/Vx8)-1{dimensionless});
    Ppvc = Ppv+Pplc;
    Pra = (Vra-Vrar)*Era-Px2*1{dimensionless}/(exp(Vra/Vx8)-1{dimensionless});
    Prac = Pra+Ppcdc;
    Prv = (Vrv-Vrvr)*Erv-Px2*1{dimensionless}/(exp(Vrv/Vx8)-1{dimensionless});
    Prvc = Prv+Ppcdc;
    Psa_a = Kc*log((Vsa-Vsa_o)/Do+1{dimensionless});
    Psa = F_vaso*Psa_a+(1{dimensionless}-F_vaso)*Psa_p;
    Psa_p = Kp1*exp(tau_p*(Vsa-Vsa_o))+Kp2*sqr(Vsa-Vsa_o);
    Psap = Vsap/Csap-Px2*1{dimensionless}/(exp(Vsap/Vx8)-1{dimensionless});
    Psc = Vsc/Csc-Px2*1{dimensionless}/(exp(Vsc/Vx8)-1{dimensionless});
    Psv = Kv*log(Vmax_sv/Vsv-0.99{dimensionless})*(-1{dimensionless});
    PulArtVol = Vpap+Vpad+Vpa;
    PulVenVol = Vpv;
    Pvc = sel
      case Vvc > Vo:
        D2+K2*exp(Vo/Vmin_vc)+K1*(Vvc-Vo)/1{capacitance}-Px2/(exp(Vvc/Vx8)-1{dimensionless});
      otherwise:
        D2+K2*exp(Vvc/Vmin_vc)-Px2/(exp(Vvc/Vx8)-1{dimensionless});
    endsel;
    Pvcc = Pvc+Pplc;
    Rsa = Rsao+Kr*exp(4{dimensionless}*F_vaso)+Kr*sqr(Vsa_max/Vsa);
    Rvc = KR*sqr(Vmax_vc/Vvc)+Ro;
    SV = COutput/HR*60{dimensionless};
    SysArtVol = Vaop+Vaod+Vsa+Vsap;
    SysVenVol = Vsv+Vvc;
    VBcirc = Vtot-perifl;
    ode(Vaod, t) = (Faop-Faod*0.059999999999999984{dimensionless}-Fcrb*0.059999999999999984{dimensionless})*16.66666666666667{dimensionless};
    ode(Vaop, t) = (Paopc-Vaop/Caop+Px2*1{dimensionless}/(exp(Vaop/Vx8)-1{dimensionless}))/Rtaop;
    ode(Vcorao, t) = Flv-ode(Vaop, t)-Faop*16.66666666666667{dimensionless}-Fcorao;
    ode(Vcorcap, t) = Fcorsa-Fcorcap;
    Vcorcirc = Vcorao+Vcorea+Vcorla+Vcorsa+Vcorcap+Vcorsv+Vcorlv+Vcorev;
    ode(Vcorea, t) = Fcorao-Fcorea;
    ode(Vcorev, t) = Fcorlv-Fcorev;
    ode(Vcorla, t) = Fcorea-Fcorla;
    ode(Vcorlv, t) = Fcorsv-Fcorlv;
    ode(Vcorsa, t) = Fcorla-Fcorsa;
    ode(Vcorsv, t) = Fcorcap-Fcorsv;
    ode(Vla, t) = Fpv-Fla;
    Vlar = (1{dimensionless}-yla)*(Vlard-Vlars)+Vlars;
    ode(Vlv, t) = Fla-Flv;
    Vlvr = (1{dimensionless}-ylv)*(Vlvrd-Vlvrs)+Vlvrs;
    ode(Vpa, t) = Fpad-Fps-Fpa;
    ode(Vpad, t) = (Fpap-Fpad*0.059999999999999984{dimensionless})*16.66666666666667{dimensionless};
    ode(Vpap, t) = Frv-Fpap*16.66666666666667{dimensionless};
    ode(Vpc, t) = Fpa-Fpc;
    Vpcd = Vrv+Vra+Vlv+Vla+perifl+Vmyo+Vcorcirc;
    ode(Vpv, t) = Fpc+Fps-Fpv;
    ode(Vra, t) = Fvc-Fra+Fcorev;
    Vrar = (1{dimensionless}-yra)*(Vrard-Vrars)+Vrars;
    ode(Vrv, t) = Fra-Frv;
    Vrvr = (1{dimensionless}-yrv)*(Vrvrd-Vrvrs)+Vrvrs;
    ode(Vsa, t) = Fsap-Fsa;
    ode(Vsap, t) = Faod-Fsap;
    ode(Vsc, t) = Fsa-Fsc;
    ode(Vsv, t) = Fsc-Fsv;
    Vtot = Vra+Vrv+Vpap+Vpad+Vpa+Vpc+Vpv+Vla+Vlv+Vaop+Vaod+Vsa+Vsap+Vsc+Vsv+Vvc+perifl+Vcorcirc;
    ode(Vvc, t) = Fsv+Fcrb-Fvc;
  enddef;
enddef;
